<?xml version='1.0' encoding='utf-8'?>
<MethodSet>
  <PreMethod methodName="PreMethod" creator="10x_genomics" dateTime="2025-09-22T12:01:41.159758">
    <TargetBlockTemperature>25</TargetBlockTemperature>
    <TargetLidTemp>105</TargetLidTemp>
  </PreMethod>
  <Method methodName="Method" creator="10x_genomics" dateTime="2025-09-22T12:01:41.159778">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>100</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>105</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>1</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>45</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>105</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>1</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>20</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>1</Slope>
      <PlateauTemperature>54</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>1</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>20</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>2</GotoNumber>
      <LoopNumber>15</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>1</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>60</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>1</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>600</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>105</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
</MethodSet>