#pragma once
#include "HSLUtilLib2.hsl"
#include "HSLSeqLib.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLSTCCLib.hs_"
#include "HSLPTLLib.hsl"

namespace NEXTERAPROCESSES {
  variable NumberOfCompleteColumns;
  variable RemainingWells;
  function Add_AmpureSingle( device & ML_STAR, sequence & seq_AmpureBeads, sequence & seq_Destination, sequence & seq_Tips, variable var_NumberSamples, variable var_BeadVolumePerWell, variable var_LLD_On, variable var_TipUsage ) void ;
  function Add_BeadFromTub( device & ML_STAR, sequence & seq_Beads, sequence & seq_Destination, sequence & seq_Tips, variable var_NumberSamples, variable var_BeadVolumePerWell, variable var_LLD_On, variable var_TipUsage ) void ;
  function Add_BeadsFromVial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse1000ul, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass1ml_Premix, variable var_LiquidClass50F ) void ;
  function Add_BeadsFromVial_wNewTips( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse1000ul, sequence & seq_TipsToUseForTransfer, variable var_VolPerSampleWell, variable var_LiquidClass1ml_Premix, variable var_LiquidClassForTransfer ) void ;
  function Add_BeadsFromVial_wNewTips_14samples_per_vial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse1000ul, sequence & seq_TipsToUseForTransfer, variable var_VolPerSampleWell, variable var_LiquidClass1ml_Premix, variable var_LiquidClassForTransfer ) void ;
  function Add_CEX_EEX( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight ) void ;
  function Add_EWS( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight ) void ;
  function Add_EWS_FromTub( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight ) void ;
  function Add_Ethanol( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_TipsToUse1000ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_LiquidClassEthanol, variable & var_TrackingEthanolVolume ) void ;
  function Add_PrimersViaVials( device & ML_STAR, sequence & seq_Tips50, sequence & seq_Adapters, sequence & seq_ALP, variable var_NumberOfIndexTypes, variable & arr_Index1Positions[], variable & arr_Index2Positions[], variable & arr_ALPpositions[] ) void ;
  function Add_ReagentFromHalfHeightVial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight_Disp ) void ;
  function Add_ReagentFromVial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight ) void ;
  function Create_EnrichmentMixture( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition_Buffer, sequence & seq_AspirationPosition_NaOH, sequence & seq_DispensePosition, sequence & seq_TipsToUseBuffer, sequence & seq_TipsToUseForTransfer, variable var_VolPerSampleBuffer, variable var_VolPerSampleNaOH, variable var_LiquidClassBuffer, variable var_LiquidClassNaOH ) void ;
  function Create_EnrichmentMixture_SingleMIDIwell( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition_Buffer, sequence & seq_AspirationPosition_NaOH, sequence & seq_DispensePosition, sequence & seq_TipsToUseBuffer, sequence & seq_TipsToUseForTransfer, variable var_VolPerSampleBuffer, variable var_VolPerSampleNaOH, variable var_LiquidClassBuffer, variable var_LiquidClassNaOH ) void ;
  function ErrorHandling_TipPickup( device & ML_STAR, sequence & seq_TipsToUse ) void ;
  function MoveHSP( device & ML_STAR, sequence & seq_HSP_StartingPosition, sequence & seq_HSP_Destination, variable var_TrackToReadBC, variable var_ParkAfterMove ) void ;
  function MoveMIDI( device & ML_STAR, sequence & seq_MIDI_Source, sequence & seq_MIDI_Destination, variable var_TrackToReadBC, variable var_Side, variable var_ParkAfterMove ) void ;
  function Normalize( device & ML_STAR, variable var_NormalizationFile, sequence & seq_Buffer, sequence & seq_SourcePlate, sequence & seq_DestinationPlate, sequence & seq_BufferTips, variable var_LC_Buffer, variable var_LC_Sample, sequence & seq_PlateSeqForJustBuffer, sequence & seq_PoolingPlate ) void ;
  function Pool( device & ML_STAR, sequence & seq_NormPlate, sequence & seq_PoolingPlate, sequence & seq_Tips300ul, variable var_LC_Pooling, variable var_cLLDSetting, variable var_Height ) void ;
  function Remove_ResidualEWS( device & ML_STAR, sequence & seq_TipsToUse50ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass ) void ;
  function Remove_ResidualEtOH( device & ML_STAR, sequence & seq_TipsToUse50ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass ) void ;
  function Transfer_EnrichmentMixture( device & ML_STAR, sequence & seq_TipsToUse, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer ) void ;
  function Transfer_EnrichmentMixture_SingleSource( device & ML_STAR, sequence & seq_TipsToUse, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer ) void ;
  function Transfer_PlateToPlate( device & ML_STAR, sequence & seq_TipsToUse, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass, variable var_AspirationHeight, variable var_DispenseHeight ) void ;
  function Transfer_PlatetoWaste( device & ML_STAR, sequence & seq_TipsToUse, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass ) void ;
  private function _VersionInfo(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  private function _VersionInfo(  ) void {
  }

  function Transfer_PlateToPlate( device & ML_STAR, sequence & seq_TipsToUse, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass, variable var_AspirationHeight, variable var_DispenseHeight ) void {
    private variable loopCounter1;
    private variable Asp_Submerge;
    private variable Asp_cLLD_sensitivity;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Transfer_PlateToPlate <<<<<<<<<<"));
    if (var_AspirationHeight == 0)
    {
      Asp_cLLD_sensitivity = 1;
      Asp_Submerge = 0.5;
    }
    else
    {
      Asp_cLLD_sensitivity = 0;
      Asp_Submerge = 0;
    }
    {
      loopCounter1 = 0;
      while (
         (seq_AspirationPosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_1 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_1 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse.SetMax(seq_TipsToUse.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_2[];
      variable _ColumnIdsArray_2[];
      variable _ColumnNamesArray_2[];
      variable _ExperimentsArray_2[];
      _FilterIdsArray_2.SetSize(0);
      _ColumnNamesArray_2.SetSize(14);
      _ColumnIdsArray_2.SetSize(14);
      _ColumnNamesArray_2.SetAt(0, "RecordId");
      _ColumnIdsArray_2.SetAt(0, 0);
      _ColumnNamesArray_2.SetAt(1, "TRackBC");
      _ColumnIdsArray_2.SetAt(1, 1);
      _ColumnNamesArray_2.SetAt(2, "TLabwareId");
      _ColumnIdsArray_2.SetAt(2, 2);
      _ColumnNamesArray_2.SetAt(3, "TPositionId");
      _ColumnIdsArray_2.SetAt(3, 3);
      _ColumnNamesArray_2.SetAt(4, "TPositionBC");
      _ColumnIdsArray_2.SetAt(4, 4);
      _ColumnNamesArray_2.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_2.SetAt(5, 5);
      _ColumnNamesArray_2.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_2.SetAt(6, 6);
      _ColumnNamesArray_2.SetAt(7, "TVolume");
      _ColumnIdsArray_2.SetAt(7, 7);
      _ColumnNamesArray_2.SetAt(8, "SRackBC");
      _ColumnIdsArray_2.SetAt(8, 8);
      _ColumnNamesArray_2.SetAt(9, "SLabwareId");
      _ColumnIdsArray_2.SetAt(9, 9);
      _ColumnNamesArray_2.SetAt(10, "SPositionId");
      _ColumnIdsArray_2.SetAt(10, 10);
      _ColumnNamesArray_2.SetAt(11, "SPositionBC");
      _ColumnIdsArray_2.SetAt(11, 11);
      _ColumnNamesArray_2.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_2.SetAt(12, 12);
      _ColumnNamesArray_2.SetAt(13, "UserName");
      _ColumnIdsArray_2.SetAt(13, 13);
      _ExperimentsArray_2.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_2, 0, _ColumnIdsArray_2, _ColumnNamesArray_2, _ExperimentsArray_2, "TransferPlateToPlate_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Transfer_PlateToPlate <<<<<<<<<<"));
  }

  function Transfer_PlatetoWaste( device & ML_STAR, sequence & seq_TipsToUse, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass ) void {
    private variable loopCounter1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Transfer_PlatetoWaste <<<<<<<<<<"));
    {
      loopCounter1 = 0;
      while (
         (seq_AspirationPosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_3 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_3 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse.SetMax(seq_TipsToUse.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_4[];
      variable _ColumnIdsArray_4[];
      variable _ColumnNamesArray_4[];
      variable _ExperimentsArray_4[];
      _FilterIdsArray_4.SetSize(0);
      _ColumnNamesArray_4.SetSize(14);
      _ColumnIdsArray_4.SetSize(14);
      _ColumnNamesArray_4.SetAt(0, "RecordId");
      _ColumnIdsArray_4.SetAt(0, 0);
      _ColumnNamesArray_4.SetAt(1, "TRackBC");
      _ColumnIdsArray_4.SetAt(1, 1);
      _ColumnNamesArray_4.SetAt(2, "TLabwareId");
      _ColumnIdsArray_4.SetAt(2, 2);
      _ColumnNamesArray_4.SetAt(3, "TPositionId");
      _ColumnIdsArray_4.SetAt(3, 3);
      _ColumnNamesArray_4.SetAt(4, "TPositionBC");
      _ColumnIdsArray_4.SetAt(4, 4);
      _ColumnNamesArray_4.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_4.SetAt(5, 5);
      _ColumnNamesArray_4.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_4.SetAt(6, 6);
      _ColumnNamesArray_4.SetAt(7, "TVolume");
      _ColumnIdsArray_4.SetAt(7, 7);
      _ColumnNamesArray_4.SetAt(8, "SRackBC");
      _ColumnIdsArray_4.SetAt(8, 8);
      _ColumnNamesArray_4.SetAt(9, "SLabwareId");
      _ColumnIdsArray_4.SetAt(9, 9);
      _ColumnNamesArray_4.SetAt(10, "SPositionId");
      _ColumnIdsArray_4.SetAt(10, 10);
      _ColumnNamesArray_4.SetAt(11, "SPositionBC");
      _ColumnIdsArray_4.SetAt(11, 11);
      _ColumnNamesArray_4.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_4.SetAt(12, 12);
      _ColumnNamesArray_4.SetAt(13, "UserName");
      _ColumnIdsArray_4.SetAt(13, 13);
      _ExperimentsArray_4.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_4, 0, _ColumnIdsArray_4, _ColumnNamesArray_4, _ExperimentsArray_4, "TransferToWaste_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Transfer_PlatetoWaste <<<<<<<<<<"));
  }

  function Add_ReagentFromVial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight ) void {
    private variable loopCounter1;
    private variable PositionID_Vial_1;
    private variable NumberSamplesMoreThan48;
    private variable LabwareID_Vial;
    private variable NumberSamplesUpTo48;
    private variable PositionID_Vial_2;
    private variable loopCounter2;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_ReagentFromVial <<<<<<<<<<"));
    if (var_NumberOfSamples > 48)
    {
      NumberSamplesMoreThan48 = var_NumberOfSamples - 48;
      NumberSamplesUpTo48 = var_NumberOfSamples - (2 * NumberSamplesMoreThan48);
    }
    else
    {
      NumberSamplesMoreThan48 = 0;
      NumberSamplesUpTo48 = var_NumberOfSamples;
    }
    LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
    PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
    SeqIncrement(seq_AspirationPosition, 1);
    PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
    SeqRemoveAll(seq_AspirationPosition);
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
      }
    }
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
      }
    }
    seq_AspirationPosition.SetCurrentPosition(1);
    MECC::TraceComment(Translate("********** Now pipetting reagent to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_5 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_5 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse.SetMax(seq_TipsToUse.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_6[];
      variable _ColumnIdsArray_6[];
      variable _ColumnNamesArray_6[];
      variable _ExperimentsArray_6[];
      _FilterIdsArray_6.SetSize(0);
      _ColumnNamesArray_6.SetSize(14);
      _ColumnIdsArray_6.SetSize(14);
      _ColumnNamesArray_6.SetAt(0, "RecordId");
      _ColumnIdsArray_6.SetAt(0, 0);
      _ColumnNamesArray_6.SetAt(1, "TRackBC");
      _ColumnIdsArray_6.SetAt(1, 1);
      _ColumnNamesArray_6.SetAt(2, "TLabwareId");
      _ColumnIdsArray_6.SetAt(2, 2);
      _ColumnNamesArray_6.SetAt(3, "TPositionId");
      _ColumnIdsArray_6.SetAt(3, 3);
      _ColumnNamesArray_6.SetAt(4, "TPositionBC");
      _ColumnIdsArray_6.SetAt(4, 4);
      _ColumnNamesArray_6.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_6.SetAt(5, 5);
      _ColumnNamesArray_6.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_6.SetAt(6, 6);
      _ColumnNamesArray_6.SetAt(7, "TVolume");
      _ColumnIdsArray_6.SetAt(7, 7);
      _ColumnNamesArray_6.SetAt(8, "SRackBC");
      _ColumnIdsArray_6.SetAt(8, 8);
      _ColumnNamesArray_6.SetAt(9, "SLabwareId");
      _ColumnIdsArray_6.SetAt(9, 9);
      _ColumnNamesArray_6.SetAt(10, "SPositionId");
      _ColumnIdsArray_6.SetAt(10, 10);
      _ColumnNamesArray_6.SetAt(11, "SPositionBC");
      _ColumnIdsArray_6.SetAt(11, 11);
      _ColumnNamesArray_6.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_6.SetAt(12, 12);
      _ColumnNamesArray_6.SetAt(13, "UserName");
      _ColumnIdsArray_6.SetAt(13, 13);
      _ExperimentsArray_6.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_6, 0, _ColumnIdsArray_6, _ColumnNamesArray_6, _ExperimentsArray_6, "Reagent_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_ReagentFromVial <<<<<<<<<<"));
  }

  function Add_PrimersViaVials( device & ML_STAR, sequence & seq_Tips50, sequence & seq_Adapters, sequence & seq_ALP, variable var_NumberOfIndexTypes, variable & arr_Index1Positions[], variable & arr_Index2Positions[], variable & arr_ALPpositions[] ) void {
    private variable WellID;
    private variable LabwareID_ALP;
    private variable LabwareID_Adapters;
    private variable Index1_Pos;
    private variable Index2_Pos;
    private variable Size_arrayALP;
    private variable loopCounter2;
    private variable loopCounter3;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_AdaptersViaVials <<<<<<<<<<"));
    LabwareID_Adapters = SeqGetLabwareId(seq_Adapters);
    LabwareID_ALP = SeqGetLabwareId(seq_ALP);
    SeqRemoveAll(seq_Adapters);
    SeqRemoveAll(seq_ALP);
    Size_arrayALP=arr_ALPpositions.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < Size_arrayALP;)
      {
        loopCounter2 = loopCounter2 + 1;
        WellID=arr_ALPpositions.GetAt(loopCounter2-1);
        SeqAdd(seq_ALP, LabwareID_ALP, WellID);
        Index1_Pos=arr_Index1Positions.GetAt(loopCounter2-1);
        SeqAdd(seq_Adapters, LabwareID_Adapters, Index1_Pos);
      }
    }
    if (var_NumberOfIndexTypes == 2)
    {
      {
        for(loopCounter2 = 0; loopCounter2 < Size_arrayALP;)
        {
          loopCounter2 = loopCounter2 + 1;
          Index2_Pos=arr_Index2Positions.GetAt(loopCounter2-1);
          SeqAdd(seq_Adapters, LabwareID_Adapters, Index2_Pos);
        }
      }
    }
    seq_Adapters.SetCurrentPosition(1);
    seq_ALP.SetCurrentPosition(1);
    MECC::TraceComment(Translate("********** Fill the ALP with the Index1 adapters **************"));
    {
      loopCounter3 = 0;
      while (
         (seq_ALP.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_ALP, 1, seq_Adapters, 1, seq_Tips50, 1);
        loopCounter3 = loopCounter3 + 1;
        onerror goto errLabel_7 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_7 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_Tips50);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_ALP.GetCurrentPosition() > 0 && seq_ALP.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_ALP.SetMax(seq_ALP.GetTotal());
      seq_Adapters.SetMax(seq_Adapters.GetTotal());
      seq_Tips50.SetMax(seq_Tips50.GetTotal());
      seq_ALP.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_Adapters);
    {
      variable _FilterIdsArray_8[];
      variable _ColumnIdsArray_8[];
      variable _ColumnNamesArray_8[];
      variable _ExperimentsArray_8[];
      _FilterIdsArray_8.SetSize(0);
      _ColumnNamesArray_8.SetSize(14);
      _ColumnIdsArray_8.SetSize(14);
      _ColumnNamesArray_8.SetAt(0, "RecordId");
      _ColumnIdsArray_8.SetAt(0, 0);
      _ColumnNamesArray_8.SetAt(1, "TRackBC");
      _ColumnIdsArray_8.SetAt(1, 1);
      _ColumnNamesArray_8.SetAt(2, "TLabwareId");
      _ColumnIdsArray_8.SetAt(2, 2);
      _ColumnNamesArray_8.SetAt(3, "TPositionId");
      _ColumnIdsArray_8.SetAt(3, 3);
      _ColumnNamesArray_8.SetAt(4, "TPositionBC");
      _ColumnIdsArray_8.SetAt(4, 4);
      _ColumnNamesArray_8.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_8.SetAt(5, 5);
      _ColumnNamesArray_8.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_8.SetAt(6, 6);
      _ColumnNamesArray_8.SetAt(7, "TVolume");
      _ColumnIdsArray_8.SetAt(7, 7);
      _ColumnNamesArray_8.SetAt(8, "SRackBC");
      _ColumnIdsArray_8.SetAt(8, 8);
      _ColumnNamesArray_8.SetAt(9, "SLabwareId");
      _ColumnIdsArray_8.SetAt(9, 9);
      _ColumnNamesArray_8.SetAt(10, "SPositionId");
      _ColumnIdsArray_8.SetAt(10, 10);
      _ColumnNamesArray_8.SetAt(11, "SPositionBC");
      _ColumnIdsArray_8.SetAt(11, 11);
      _ColumnNamesArray_8.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_8.SetAt(12, 12);
      _ColumnNamesArray_8.SetAt(13, "UserName");
      _ColumnIdsArray_8.SetAt(13, 13);
      _ExperimentsArray_8.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_ALP, 3, _FilterIdsArray_8, 0, _ColumnIdsArray_8, _ColumnNamesArray_8, _ExperimentsArray_8, "Adapters1_to_ALP_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    if (var_NumberOfIndexTypes == 2)
    {
      MECC::TraceComment(Translate("**************** Fill the ALP with the Index2 adapters, if any **********************"));
      {
        loopCounter3 = 0;
        while (
           (seq_ALP.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, seq_ALP, 1, seq_Adapters, 1, seq_Tips50, 1);
          loopCounter3 = loopCounter3 + 1;
          onerror goto errLabel_9 ;
          err.Clear();
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          errLabel_9 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            ErrorHandling_TipPickup(ML_STAR, seq_Tips50);
          }   /* end if from skip handler if no error */
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (seq_ALP.GetCurrentPosition() > 0 && seq_ALP.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        seq_ALP.SetMax(seq_ALP.GetTotal());
        seq_Adapters.SetMax(seq_Adapters.GetTotal());
        seq_Tips50.SetMax(seq_Tips50.GetTotal());
        seq_ALP.SetCurrentPosition(1);
        seq_Adapters.SetCurrentPosition(1);
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, seq_Adapters);
      {
        variable _FilterIdsArray_10[];
        variable _ColumnIdsArray_10[];
        variable _ColumnNamesArray_10[];
        variable _ExperimentsArray_10[];
        _FilterIdsArray_10.SetSize(0);
        _ColumnNamesArray_10.SetSize(14);
        _ColumnIdsArray_10.SetSize(14);
        _ColumnNamesArray_10.SetAt(0, "RecordId");
        _ColumnIdsArray_10.SetAt(0, 0);
        _ColumnNamesArray_10.SetAt(1, "TRackBC");
        _ColumnIdsArray_10.SetAt(1, 1);
        _ColumnNamesArray_10.SetAt(2, "TLabwareId");
        _ColumnIdsArray_10.SetAt(2, 2);
        _ColumnNamesArray_10.SetAt(3, "TPositionId");
        _ColumnIdsArray_10.SetAt(3, 3);
        _ColumnNamesArray_10.SetAt(4, "TPositionBC");
        _ColumnIdsArray_10.SetAt(4, 4);
        _ColumnNamesArray_10.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_10.SetAt(5, 5);
        _ColumnNamesArray_10.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_10.SetAt(6, 6);
        _ColumnNamesArray_10.SetAt(7, "TVolume");
        _ColumnIdsArray_10.SetAt(7, 7);
        _ColumnNamesArray_10.SetAt(8, "SRackBC");
        _ColumnIdsArray_10.SetAt(8, 8);
        _ColumnNamesArray_10.SetAt(9, "SLabwareId");
        _ColumnIdsArray_10.SetAt(9, 9);
        _ColumnNamesArray_10.SetAt(10, "SPositionId");
        _ColumnIdsArray_10.SetAt(10, 10);
        _ColumnNamesArray_10.SetAt(11, "SPositionBC");
        _ColumnIdsArray_10.SetAt(11, 11);
        _ColumnNamesArray_10.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_10.SetAt(12, 12);
        _ColumnNamesArray_10.SetAt(13, "UserName");
        _ColumnIdsArray_10.SetAt(13, 13);
        _ExperimentsArray_10.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_ALP, 3, _FilterIdsArray_10, 0, _ColumnIdsArray_10, _ColumnNamesArray_10, _ExperimentsArray_10, "Adapters2_to_ALP_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_AdaptersViaVials <<<<<<<<<<"));
  }

  function MoveMIDI( device & ML_STAR, sequence & seq_MIDI_Source, sequence & seq_MIDI_Destination, variable var_TrackToReadBC, variable var_Side, variable var_ParkAfterMove ) void {
    private variable GripWidth;
    private variable GripInverse;
    private variable GripOpening;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  MoveMIDI <<<<<<<<<<"));
    if (var_Side == 0)
    {
      MECC::TraceComment(Translate("***** Gripping on small side *****"));
      GripWidth = 80;
      GripOpening = 87;
      GripInverse = 1;
    }
    else
    {
      MECC::TraceComment(Translate("***** Gripping on large side *****"));
      GripWidth = 123.7;
      GripOpening = 130.2;
      GripInverse = 0;
    }
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    if (var_TrackToReadBC > 0)
    {
      ML_STAR._3ADE1686_D394_4a08_918C_20E3EDA3CC69("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"); // ReadPlateBarcode
    }
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  MoveMIDI <<<<<<<<<<"));
  }

  function MoveHSP( device & ML_STAR, sequence & seq_HSP_StartingPosition, sequence & seq_HSP_Destination, variable var_TrackToReadBC, variable var_ParkAfterMove ) void {
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  MoveHSP <<<<<<<<<"));
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    if (var_TrackToReadBC > 0)
    {
      ML_STAR._3ADE1686_D394_4a08_918C_20E3EDA3CC69("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"); // ReadPlateBarcode
    }
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  MoveHSP <<<<<<<<<<"));
  }

  function Normalize( device & ML_STAR, variable var_NormalizationFile, sequence & seq_Buffer, sequence & seq_SourcePlate, sequence & seq_DestinationPlate, sequence & seq_BufferTips, variable var_LC_Buffer, variable var_LC_Sample, sequence & seq_PlateSeqForJustBuffer, sequence & seq_PoolingPlate ) void {
    private variable BufferVolume;
    private file file1;
    private variable loopCounter1;
    private variable arr_NormalizationVolumes[];
    private variable LinesInTheFile;
    private variable loopCounter2;
    private variable DispVolume;
    private variable ArrayIndexCounter;
    private variable arr_NormVolDispense[];
    private variable TheLabwareID;
    private variable ExtraVolume;
    private variable arr_NormVolDispenseExtra[];
    private variable WellID_Source;
    private variable LabwareID_SourcePlate;
    private variable LabwareID_DestinationPlate;
    private variable LabwareID_PoolingPlate;
    private variable WellID_Pool;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Normalize <<<<<<<<<<"));
    MECC::TraceComment(Translate("Get the values from the Normalization File.  \nAssumptions:\nThe File must be a comma separated txt or csv file. \nThe file must have at least 2 columns, headed by \"SourceWell\" and \"Volume\" (buffer volume)\nThe file must be organized for source and destination A1, B1, C1, ...\nThe welll IDs must not have leading zeros (A01)\nThe volume of buffer required per well must be less than or equal to 590.\nIf pooling is desired, a fourth column must have the well ID for the pooling plate.\n"));
    LabwareID_SourcePlate = SeqGetLabwareId(seq_SourcePlate);
    LabwareID_DestinationPlate = SeqGetLabwareId(seq_DestinationPlate);
    LabwareID_PoolingPlate = SeqGetLabwareId(seq_PoolingPlate);
    SeqRemoveAll(seq_SourcePlate);
    SeqRemoveAll(seq_DestinationPlate);
    SeqRemoveAll(seq_PoolingPlate);
    file1.AddField("SourceWell", WellID_Source, hslString, 255);
    file1.AddField("Volume", BufferVolume, hslFloat);
    file1.AddField("PoolWell", WellID_Pool, hslString, 255);
    file1.SetDelimiter(hslCSVDelimited);
    if( 0 == file1.Open(var_NormalizationFile, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_NormalizationFile, "HxMetEdCompCmd");
    }
    arr_NormalizationVolumes.SetSize(0);
    arr_NormVolDispense.SetSize(0);
    {
      LinesInTheFile = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        LinesInTheFile = LinesInTheFile + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Trace ("For source well ", WellID_Source, ", ", BufferVolume, "ul total buffer is required.");
        if (BufferVolume > 290)
        {
          BufferVolume = 290;
        }
        DispVolume = BufferVolume + 10;
        arr_NormalizationVolumes.AddAsLast(BufferVolume);
        arr_NormVolDispense.AddAsLast(DispVolume);
        SeqAdd(seq_SourcePlate, LabwareID_SourcePlate, WellID_Source);
        SeqAdd(seq_DestinationPlate, LabwareID_DestinationPlate, WellID_Source);
        SeqAdd(seq_PoolingPlate, LabwareID_PoolingPlate, WellID_Pool);
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    seq_SourcePlate.SetCurrentPosition(1);
    seq_DestinationPlate.SetCurrentPosition(1);
    seq_PoolingPlate.SetCurrentPosition(1);
    MECC::TraceComment(Translate("************* Pipette the buffer and sample to the plate...."));
    ArrayIndexCounter = 1;
    {
      loopCounter2 = 0;
      while (
         (seq_SourcePlate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_Buffer, 1, seq_BufferTips, 1, seq_DestinationPlate, 1, seq_SourcePlate, 1);
        loopCounter2 = loopCounter2 + 1;
        onerror goto errLabel_11 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_11 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_BufferTips);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        ArrayIndexCounter = ArrayIndexCounter + 8;
        if (
           (seq_SourcePlate.GetCurrentPosition() > 0 && seq_SourcePlate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_Buffer.SetMax(seq_Buffer.GetTotal());
      seq_BufferTips.SetMax(seq_BufferTips.GetTotal());
      seq_DestinationPlate.SetMax(seq_DestinationPlate.GetTotal());
      seq_SourcePlate.SetMax(seq_SourcePlate.GetTotal());
      seq_Buffer.SetCurrentPosition(1);
      seq_DestinationPlate.SetCurrentPosition(1);
      seq_SourcePlate.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_Buffer);
    {
      variable _FilterIdsArray_12[];
      variable _ColumnIdsArray_12[];
      variable _ColumnNamesArray_12[];
      variable _ExperimentsArray_12[];
      _FilterIdsArray_12.SetSize(0);
      _ColumnNamesArray_12.SetSize(14);
      _ColumnIdsArray_12.SetSize(14);
      _ColumnNamesArray_12.SetAt(0, "RecordId");
      _ColumnIdsArray_12.SetAt(0, 0);
      _ColumnNamesArray_12.SetAt(1, "TRackBC");
      _ColumnIdsArray_12.SetAt(1, 1);
      _ColumnNamesArray_12.SetAt(2, "TLabwareId");
      _ColumnIdsArray_12.SetAt(2, 2);
      _ColumnNamesArray_12.SetAt(3, "TPositionId");
      _ColumnIdsArray_12.SetAt(3, 3);
      _ColumnNamesArray_12.SetAt(4, "TPositionBC");
      _ColumnIdsArray_12.SetAt(4, 4);
      _ColumnNamesArray_12.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_12.SetAt(5, 5);
      _ColumnNamesArray_12.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_12.SetAt(6, 6);
      _ColumnNamesArray_12.SetAt(7, "TVolume");
      _ColumnIdsArray_12.SetAt(7, 7);
      _ColumnNamesArray_12.SetAt(8, "SRackBC");
      _ColumnIdsArray_12.SetAt(8, 8);
      _ColumnNamesArray_12.SetAt(9, "SLabwareId");
      _ColumnIdsArray_12.SetAt(9, 9);
      _ColumnNamesArray_12.SetAt(10, "SPositionId");
      _ColumnIdsArray_12.SetAt(10, 10);
      _ColumnNamesArray_12.SetAt(11, "SPositionBC");
      _ColumnIdsArray_12.SetAt(11, 11);
      _ColumnNamesArray_12.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_12.SetAt(12, 12);
      _ColumnNamesArray_12.SetAt(13, "UserName");
      _ColumnIdsArray_12.SetAt(13, 13);
      _ExperimentsArray_12.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DestinationPlate, 3, _FilterIdsArray_12, 0, _ColumnIdsArray_12, _ColumnNamesArray_12, _ExperimentsArray_12, "Normalization_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate("************* Pipette extra buffer to the plate (and mix) when the required buffer volume is greater than 290ul...."));
    TheLabwareID = SeqGetLabwareId(seq_DestinationPlate);
    SeqRemoveAll(seq_PlateSeqForJustBuffer);
    arr_NormVolDispenseExtra.SetSize(0);
    file1.AddField("SourceWell", WellID_Source, hslString, 255);
    file1.AddField("Volume", BufferVolume, hslFloat);
    file1.SetDelimiter(hslCSVDelimited);
    if( 0 == file1.Open(var_NormalizationFile, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_NormalizationFile, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (BufferVolume > 290)
        {
          ExtraVolume = BufferVolume - 290;
          arr_NormVolDispenseExtra.AddAsLast(ExtraVolume);
          SeqAdd(seq_PlateSeqForJustBuffer, TheLabwareID, WellID_Source);
          Trace ("For well ", WellID_Source, ", in the normalization plate, ", ExtraVolume, "ul extra buffer is required.");
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    seq_PlateSeqForJustBuffer.SetCurrentPosition(1);
    ArrayIndexCounter = 1;
    {
      loopCounter2 = 0;
      while (
         (seq_PlateSeqForJustBuffer.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_Buffer, 1, seq_BufferTips, 1, seq_PlateSeqForJustBuffer, 1);
        loopCounter2 = loopCounter2 + 1;
        onerror goto errLabel_13 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_13 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_BufferTips);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        ArrayIndexCounter = ArrayIndexCounter + 8;
        if (
           (seq_PlateSeqForJustBuffer.GetCurrentPosition() > 0 && seq_PlateSeqForJustBuffer.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_Buffer.SetMax(seq_Buffer.GetTotal());
      seq_BufferTips.SetMax(seq_BufferTips.GetTotal());
      seq_PlateSeqForJustBuffer.SetMax(seq_PlateSeqForJustBuffer.GetTotal());
      seq_Buffer.SetCurrentPosition(1);
      seq_PlateSeqForJustBuffer.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Normalize <<<<<<<<<<"));
  }

  function Pool( device & ML_STAR, sequence & seq_NormPlate, sequence & seq_PoolingPlate, sequence & seq_Tips300ul, variable var_LC_Pooling, variable var_cLLDSetting, variable var_Height ) void {
    private variable loopCounter1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Pool <<<<<<<<<<"));
    onerror goto errLabel_14 ;
    err.Clear();
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    errLabel_14 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      ErrorHandling_TipPickup(ML_STAR, seq_Tips300ul);
    }   /* end if from skip handler if no error */
    {
      loopCounter1 = 0;
      while (
         (seq_NormPlate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_NormPlate, 1, seq_PoolingPlate, 1, seq_Tips300ul, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (seq_NormPlate.GetCurrentPosition() > 0 && seq_NormPlate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_NormPlate.SetMax(seq_NormPlate.GetTotal());
      seq_PoolingPlate.SetMax(seq_PoolingPlate.GetTotal());
      seq_Tips300ul.SetMax(seq_Tips300ul.GetTotal());
      seq_NormPlate.SetCurrentPosition(1);
      seq_PoolingPlate.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_NormPlate);
    {
      variable _FilterIdsArray_15[];
      variable _ColumnIdsArray_15[];
      variable _ColumnNamesArray_15[];
      variable _ExperimentsArray_15[];
      _FilterIdsArray_15.SetSize(0);
      _ColumnNamesArray_15.SetSize(14);
      _ColumnIdsArray_15.SetSize(14);
      _ColumnNamesArray_15.SetAt(0, "RecordId");
      _ColumnIdsArray_15.SetAt(0, 0);
      _ColumnNamesArray_15.SetAt(1, "TRackBC");
      _ColumnIdsArray_15.SetAt(1, 1);
      _ColumnNamesArray_15.SetAt(2, "TLabwareId");
      _ColumnIdsArray_15.SetAt(2, 2);
      _ColumnNamesArray_15.SetAt(3, "TPositionId");
      _ColumnIdsArray_15.SetAt(3, 3);
      _ColumnNamesArray_15.SetAt(4, "TPositionBC");
      _ColumnIdsArray_15.SetAt(4, 4);
      _ColumnNamesArray_15.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_15.SetAt(5, 5);
      _ColumnNamesArray_15.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_15.SetAt(6, 6);
      _ColumnNamesArray_15.SetAt(7, "TVolume");
      _ColumnIdsArray_15.SetAt(7, 7);
      _ColumnNamesArray_15.SetAt(8, "SRackBC");
      _ColumnIdsArray_15.SetAt(8, 8);
      _ColumnNamesArray_15.SetAt(9, "SLabwareId");
      _ColumnIdsArray_15.SetAt(9, 9);
      _ColumnNamesArray_15.SetAt(10, "SPositionId");
      _ColumnIdsArray_15.SetAt(10, 10);
      _ColumnNamesArray_15.SetAt(11, "SPositionBC");
      _ColumnIdsArray_15.SetAt(11, 11);
      _ColumnNamesArray_15.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_15.SetAt(12, 12);
      _ColumnNamesArray_15.SetAt(13, "UserName");
      _ColumnIdsArray_15.SetAt(13, 13);
      _ExperimentsArray_15.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_PoolingPlate, 3, _FilterIdsArray_15, 0, _ColumnIdsArray_15, _ColumnNamesArray_15, _ExperimentsArray_15, "Pool_Into_A1_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Pool <<<<<<<<<<"));
  }

  function Add_BeadsFromVial_wNewTips( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse1000ul, sequence & seq_TipsToUseForTransfer, variable var_VolPerSampleWell, variable var_LiquidClass1ml_Premix, variable var_LiquidClassForTransfer ) void {
    private variable loopCounter1;
    private variable MixVolume2;
    private variable ChPatternMixing;
    private variable MixVolume1;
    private variable arr_MixVols[];
    private variable PositionID_Vial_1;
    private variable PositionID_Vial_2;
    private variable LabwareID_Vial;
    private variable NumberSamplesMoreThan48;
    private variable TotalVolume;
    private variable First48Volume;
    private variable loopCounter2;
    private variable RemainingVolume;
    private variable NumberSamplesUpTo48;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_ReagentFromVial_wNewTips <<<<<<<<<<"));
    TotalVolume = var_VolPerSampleWell * var_NumberOfSamples;
    if (var_NumberOfSamples > 48)
    {
      ChPatternMixing = Translate("11000000");
      First48Volume = var_VolPerSampleWell * 48;
      RemainingVolume = TotalVolume - First48Volume;
      MixVolume1 = First48Volume / (2 * 1.0);
      MixVolume2 = RemainingVolume / (2 * 1.0);
      if (MixVolume1 > 1000)
      {
        MixVolume1 = 1000;
      }
      if (MixVolume2 > 1000)
      {
        MixVolume2 = 1000;
      }
    }
    else
    {
      ChPatternMixing = Translate("10000000");
      MixVolume1 = TotalVolume / (2 * 1.0);
      if (MixVolume1 > 1000)
      {
        MixVolume1 = 1000;
      }
    }
    Trace ("Volume per sample well:  ", var_VolPerSampleWell);
    Trace ("Mix volume, channel 1:  ", MixVolume1);
    Trace ("Mix volume, channel 2:  ", MixVolume2);
    arr_MixVols.SetSize(2);
    arr_MixVols.SetAt(1-1, MixVolume1);
    arr_MixVols.SetAt(2-1, MixVolume2);
    MECC::TraceComment(Translate("********* Premix in vial with 1 or 2 1ml Tips ***********"));
    onerror goto errLabel_16 ;
    err.Clear();
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    errLabel_16 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse1000ul);
    }   /* end if from skip handler if no error */
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    if (var_NumberOfSamples > 48)
    {
      NumberSamplesMoreThan48 = var_NumberOfSamples - 48;
      NumberSamplesUpTo48 = var_NumberOfSamples - (2 * NumberSamplesMoreThan48);
    }
    else
    {
      NumberSamplesMoreThan48 = 0;
      NumberSamplesUpTo48 = var_NumberOfSamples;
    }
    LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
    PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
    SeqIncrement(seq_AspirationPosition, 1);
    PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
    SeqRemoveAll(seq_AspirationPosition);
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
      }
    }
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
      }
    }
    seq_AspirationPosition.SetCurrentPosition(1);
    MECC::TraceComment(Translate("********** Now pipetting beads to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUseForTransfer, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_17 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_17 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUseForTransfer);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUseForTransfer.SetMax(seq_TipsToUseForTransfer.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_ReagentFromVial_wNewTips <<<<<<<<<<"));
  }

  function Add_ReagentFromHalfHeightVial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight_Disp ) void {
    private variable loopCounter1;
    private variable PositionID_Vial_1;
    private variable PositionID_Vial_2;
    private variable NumberSamplesMoreThan48;
    private variable loopCounter2;
    private variable LabwareID_Vial;
    private variable NumberSamplesUpTo48;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_ReagentFromHalfHeightVial <<<<<<<<<<"));
    if (var_NumberOfSamples > 48)
    {
      NumberSamplesMoreThan48 = var_NumberOfSamples - 48;
      NumberSamplesUpTo48 = var_NumberOfSamples - (2 * NumberSamplesMoreThan48);
    }
    else
    {
      NumberSamplesMoreThan48 = 0;
      NumberSamplesUpTo48 = var_NumberOfSamples;
    }
    LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
    PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
    SeqIncrement(seq_AspirationPosition, 1);
    PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
    SeqRemoveAll(seq_AspirationPosition);
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
      }
    }
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
      }
    }
    seq_AspirationPosition.SetCurrentPosition(1);
    MECC::TraceComment(Translate("********** Now pipetting reagent to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_DispensePosition, 1, seq_TipsToUse50ul, 1, seq_AspirationPosition, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_18 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_18 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse50ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
      seq_AspirationPosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_19[];
      variable _ColumnIdsArray_19[];
      variable _ColumnNamesArray_19[];
      variable _ExperimentsArray_19[];
      _FilterIdsArray_19.SetSize(0);
      _ColumnNamesArray_19.SetSize(14);
      _ColumnIdsArray_19.SetSize(14);
      _ColumnNamesArray_19.SetAt(0, "RecordId");
      _ColumnIdsArray_19.SetAt(0, 0);
      _ColumnNamesArray_19.SetAt(1, "TRackBC");
      _ColumnIdsArray_19.SetAt(1, 1);
      _ColumnNamesArray_19.SetAt(2, "TLabwareId");
      _ColumnIdsArray_19.SetAt(2, 2);
      _ColumnNamesArray_19.SetAt(3, "TPositionId");
      _ColumnIdsArray_19.SetAt(3, 3);
      _ColumnNamesArray_19.SetAt(4, "TPositionBC");
      _ColumnIdsArray_19.SetAt(4, 4);
      _ColumnNamesArray_19.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_19.SetAt(5, 5);
      _ColumnNamesArray_19.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_19.SetAt(6, 6);
      _ColumnNamesArray_19.SetAt(7, "TVolume");
      _ColumnIdsArray_19.SetAt(7, 7);
      _ColumnNamesArray_19.SetAt(8, "SRackBC");
      _ColumnIdsArray_19.SetAt(8, 8);
      _ColumnNamesArray_19.SetAt(9, "SLabwareId");
      _ColumnIdsArray_19.SetAt(9, 9);
      _ColumnNamesArray_19.SetAt(10, "SPositionId");
      _ColumnIdsArray_19.SetAt(10, 10);
      _ColumnNamesArray_19.SetAt(11, "SPositionBC");
      _ColumnIdsArray_19.SetAt(11, 11);
      _ColumnNamesArray_19.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_19.SetAt(12, 12);
      _ColumnNamesArray_19.SetAt(13, "UserName");
      _ColumnIdsArray_19.SetAt(13, 13);
      _ExperimentsArray_19.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_19, 0, _ColumnIdsArray_19, _ColumnNamesArray_19, _ExperimentsArray_19, "Reagent_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_ReagentFromHalfHeightVial <<<<<<<<<<"));
  }

  function Add_BeadsFromVial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse1000ul, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass1ml_Premix, variable var_LiquidClass50F ) void {
    private variable MixVolume2;
    private variable PositionID_Vial_1;
    private variable PositionID_Vial_2;
    private variable NumberSamplesMoreThan48;
    private variable TotalVolume;
    private variable ChPatternMixing;
    private variable loopCounter1;
    private variable First48Volume;
    private variable loopCounter2;
    private variable RemainingVolume;
    private variable LabwareID_Vial;
    private variable NumberSamplesUpTo48;
    private variable MixVolume1;
    private variable arr_MixVols[];
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_BeadsFromVial <<<<<<<<<<"));
    TotalVolume = var_VolPerSampleWell * var_NumberOfSamples;
    if (var_NumberOfSamples > 48)
    {
      ChPatternMixing = Translate("11000000");
      First48Volume = var_VolPerSampleWell * 48;
      RemainingVolume = TotalVolume - First48Volume;
      MixVolume1 = First48Volume / (2 * 1.0);
      MixVolume2 = RemainingVolume / (2 * 1.0);
      if (MixVolume1 > 1000)
      {
        MixVolume1 = 1000;
      }
      if (MixVolume2 > 1000)
      {
        MixVolume2 = 1000;
      }
    }
    else
    {
      ChPatternMixing = Translate("10000000");
      MixVolume1 = TotalVolume / (2 * 1.0);
      if (MixVolume1 > 1000)
      {
        MixVolume1 = 1000;
      }
    }
    Trace ("Volume per sample well:  ", var_VolPerSampleWell);
    Trace ("Mix volume, channel 1:  ", MixVolume1);
    Trace ("Mix volume, channel 2:  ", MixVolume2);
    arr_MixVols.SetSize(2);
    arr_MixVols.SetAt(1-1, MixVolume1);
    arr_MixVols.SetAt(2-1, MixVolume2);
    MECC::TraceComment(Translate("********* Premix in vial with 1 or 2 1ml Tips ***********"));
    onerror goto errLabel_20 ;
    err.Clear();
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    errLabel_20 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse1000ul);
    }   /* end if from skip handler if no error */
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    if (var_NumberOfSamples > 48)
    {
      NumberSamplesMoreThan48 = var_NumberOfSamples - 48;
      NumberSamplesUpTo48 = var_NumberOfSamples - (2 * NumberSamplesMoreThan48);
    }
    else
    {
      NumberSamplesMoreThan48 = 0;
      NumberSamplesUpTo48 = var_NumberOfSamples;
    }
    LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
    PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
    SeqIncrement(seq_AspirationPosition, 1);
    PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
    SeqRemoveAll(seq_AspirationPosition);
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
      }
    }
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
      }
    }
    seq_AspirationPosition.SetCurrentPosition(1);
    MECC::TraceComment(Translate("********** Now pipetting beads to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_DispensePosition, 1, seq_TipsToUse50ul, 1, seq_AspirationPosition, 1);
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 == 1)
        {
          onerror goto errLabel_21 ;
          err.Clear();
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          errLabel_21 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse50ul);
          }   /* end if from skip handler if no error */
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
      seq_AspirationPosition.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_22[];
      variable _ColumnIdsArray_22[];
      variable _ColumnNamesArray_22[];
      variable _ExperimentsArray_22[];
      _FilterIdsArray_22.SetSize(0);
      _ColumnNamesArray_22.SetSize(14);
      _ColumnIdsArray_22.SetSize(14);
      _ColumnNamesArray_22.SetAt(0, "RecordId");
      _ColumnIdsArray_22.SetAt(0, 0);
      _ColumnNamesArray_22.SetAt(1, "TRackBC");
      _ColumnIdsArray_22.SetAt(1, 1);
      _ColumnNamesArray_22.SetAt(2, "TLabwareId");
      _ColumnIdsArray_22.SetAt(2, 2);
      _ColumnNamesArray_22.SetAt(3, "TPositionId");
      _ColumnIdsArray_22.SetAt(3, 3);
      _ColumnNamesArray_22.SetAt(4, "TPositionBC");
      _ColumnIdsArray_22.SetAt(4, 4);
      _ColumnNamesArray_22.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_22.SetAt(5, 5);
      _ColumnNamesArray_22.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_22.SetAt(6, 6);
      _ColumnNamesArray_22.SetAt(7, "TVolume");
      _ColumnIdsArray_22.SetAt(7, 7);
      _ColumnNamesArray_22.SetAt(8, "SRackBC");
      _ColumnIdsArray_22.SetAt(8, 8);
      _ColumnNamesArray_22.SetAt(9, "SLabwareId");
      _ColumnIdsArray_22.SetAt(9, 9);
      _ColumnNamesArray_22.SetAt(10, "SPositionId");
      _ColumnIdsArray_22.SetAt(10, 10);
      _ColumnNamesArray_22.SetAt(11, "SPositionBC");
      _ColumnIdsArray_22.SetAt(11, 11);
      _ColumnNamesArray_22.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_22.SetAt(12, 12);
      _ColumnNamesArray_22.SetAt(13, "UserName");
      _ColumnIdsArray_22.SetAt(13, 13);
      _ExperimentsArray_22.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_22, 0, _ColumnIdsArray_22, _ColumnNamesArray_22, _ExperimentsArray_22, "RRB_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_ReagentFromVial <<<<<<<<<<"));
  }

  function Create_EnrichmentMixture( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition_Buffer, sequence & seq_AspirationPosition_NaOH, sequence & seq_DispensePosition, sequence & seq_TipsToUseBuffer, sequence & seq_TipsToUseForTransfer, variable var_VolPerSampleBuffer, variable var_VolPerSampleNaOH, variable var_LiquidClassBuffer, variable var_LiquidClassNaOH ) void {
    private variable PositionID_Vial_1;
    private variable loopCounter1;
    private variable LabwareID_Vial;
    private variable AspVol_NaOH;
    private variable loopCounter2;
    private variable AspVol_Buffer;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Create_EnrichmentMixture <<<<<<<<<<"));
    LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition_Buffer);
    PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition_Buffer);
    SeqRemoveAll(seq_AspirationPosition_Buffer);
    {
      for(loopCounter2 = 0; loopCounter2 < 8;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition_Buffer, LabwareID_Vial, PositionID_Vial_1);
      }
    }
    seq_AspirationPosition_Buffer.SetCurrentPosition(1);
    LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition_NaOH);
    PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition_NaOH);
    SeqRemoveAll(seq_AspirationPosition_NaOH);
    {
      for(loopCounter2 = 0; loopCounter2 < 8;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition_NaOH, LabwareID_Vial, PositionID_Vial_1);
      }
    }
    seq_AspirationPosition_NaOH.SetCurrentPosition(1);
    AspVol_Buffer = var_VolPerSampleBuffer * var_NumberOfSamples;
    AspVol_Buffer = AspVol_Buffer / (8 * 1.0);
    MECC::TraceComment(Translate("********** Now pipetting buffer to intermediate plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition_Buffer, 1, seq_DispensePosition, 1, seq_TipsToUseBuffer, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_23 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_23 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUseBuffer);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition_Buffer.SetMax(seq_AspirationPosition_Buffer.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUseBuffer.SetMax(seq_TipsToUseBuffer.GetTotal());
      seq_AspirationPosition_Buffer.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    AspVol_NaOH = var_VolPerSampleNaOH * var_NumberOfSamples;
    AspVol_NaOH = AspVol_NaOH / (8 * 1.0);
    MECC::TraceComment(Translate("********** Now pipetting NaOH to intermediate containers, and mix"));
    {
      loopCounter1 = 0;
      while (
         (seq_AspirationPosition_NaOH.GetCurrentPosition() > 0)
      && (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition_NaOH, 1, seq_DispensePosition, 1, seq_TipsToUseForTransfer, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_24 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_24 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUseForTransfer);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_AspirationPosition_NaOH.GetCurrentPosition() > 0 && seq_AspirationPosition_NaOH.GetMax() == 0 )
        && (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition_NaOH.SetMax(seq_AspirationPosition_NaOH.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUseForTransfer.SetMax(seq_TipsToUseForTransfer.GetTotal());
      seq_AspirationPosition_NaOH.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Create_EnrichmentMixture <<<<<<<<<<"));
  }

  function Add_CEX_EEX( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight ) void {
    private variable PositionID_Vial_1;
    private variable PositionID_Vial_2;
    private variable NumberSamplesMoreThan48;
    private variable loopCounter1;
    private variable LabwareID_Vial;
    private variable loopCounter2;
    private variable NumberSamplesUpTo48;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_CEX_EEX <<<<<<<<<<"));
    if(0){
      if (var_NumberOfSamples > 48)
      {
        NumberSamplesMoreThan48 = var_NumberOfSamples - 48;
        NumberSamplesUpTo48 = var_NumberOfSamples - (2 * NumberSamplesMoreThan48);
      }
      else
      {
        NumberSamplesMoreThan48 = 0;
        NumberSamplesUpTo48 = var_NumberOfSamples;
      }
      LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
      PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
      SeqIncrement(seq_AspirationPosition, 1);
      PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
      SeqRemoveAll(seq_AspirationPosition);
      {
        for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan48;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
        }
      }
      {
        for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo48;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        }
      }
      seq_AspirationPosition.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("********** Now pipetting reagent to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_25 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_25 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse.SetMax(seq_TipsToUse.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_6[];
      variable _ColumnIdsArray_6[];
      variable _ColumnNamesArray_6[];
      variable _ExperimentsArray_6[];
      _FilterIdsArray_6.SetSize(0);
      _ColumnNamesArray_6.SetSize(14);
      _ColumnIdsArray_6.SetSize(14);
      _ColumnNamesArray_6.SetAt(0, "RecordId");
      _ColumnIdsArray_6.SetAt(0, 0);
      _ColumnNamesArray_6.SetAt(1, "TRackBC");
      _ColumnIdsArray_6.SetAt(1, 1);
      _ColumnNamesArray_6.SetAt(2, "TLabwareId");
      _ColumnIdsArray_6.SetAt(2, 2);
      _ColumnNamesArray_6.SetAt(3, "TPositionId");
      _ColumnIdsArray_6.SetAt(3, 3);
      _ColumnNamesArray_6.SetAt(4, "TPositionBC");
      _ColumnIdsArray_6.SetAt(4, 4);
      _ColumnNamesArray_6.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_6.SetAt(5, 5);
      _ColumnNamesArray_6.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_6.SetAt(6, 6);
      _ColumnNamesArray_6.SetAt(7, "TVolume");
      _ColumnIdsArray_6.SetAt(7, 7);
      _ColumnNamesArray_6.SetAt(8, "SRackBC");
      _ColumnIdsArray_6.SetAt(8, 8);
      _ColumnNamesArray_6.SetAt(9, "SLabwareId");
      _ColumnIdsArray_6.SetAt(9, 9);
      _ColumnNamesArray_6.SetAt(10, "SPositionId");
      _ColumnIdsArray_6.SetAt(10, 10);
      _ColumnNamesArray_6.SetAt(11, "SPositionBC");
      _ColumnIdsArray_6.SetAt(11, 11);
      _ColumnNamesArray_6.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_6.SetAt(12, 12);
      _ColumnNamesArray_6.SetAt(13, "UserName");
      _ColumnIdsArray_6.SetAt(13, 13);
      _ExperimentsArray_6.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_6, 0, _ColumnIdsArray_6, _ColumnNamesArray_6, _ExperimentsArray_6, "Reagent_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_ReagentFromVial <<<<<<<<<<"));
  }

  function Remove_ResidualEtOH( device & ML_STAR, sequence & seq_TipsToUse50ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass ) void {
    private variable loopCounter1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Remove_ResidualEtOH <<<<<<<<<<"));
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    {
      loopCounter1 = 0;
      while (
         (seq_AspirationPosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse50ul, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_26 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_26 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse50ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_27[];
      variable _ColumnIdsArray_27[];
      variable _ColumnNamesArray_27[];
      variable _ExperimentsArray_27[];
      _FilterIdsArray_27.SetSize(0);
      _ColumnNamesArray_27.SetSize(14);
      _ColumnIdsArray_27.SetSize(14);
      _ColumnNamesArray_27.SetAt(0, "RecordId");
      _ColumnIdsArray_27.SetAt(0, 0);
      _ColumnNamesArray_27.SetAt(1, "TRackBC");
      _ColumnIdsArray_27.SetAt(1, 1);
      _ColumnNamesArray_27.SetAt(2, "TLabwareId");
      _ColumnIdsArray_27.SetAt(2, 2);
      _ColumnNamesArray_27.SetAt(3, "TPositionId");
      _ColumnIdsArray_27.SetAt(3, 3);
      _ColumnNamesArray_27.SetAt(4, "TPositionBC");
      _ColumnIdsArray_27.SetAt(4, 4);
      _ColumnNamesArray_27.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_27.SetAt(5, 5);
      _ColumnNamesArray_27.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_27.SetAt(6, 6);
      _ColumnNamesArray_27.SetAt(7, "TVolume");
      _ColumnIdsArray_27.SetAt(7, 7);
      _ColumnNamesArray_27.SetAt(8, "SRackBC");
      _ColumnIdsArray_27.SetAt(8, 8);
      _ColumnNamesArray_27.SetAt(9, "SLabwareId");
      _ColumnIdsArray_27.SetAt(9, 9);
      _ColumnNamesArray_27.SetAt(10, "SPositionId");
      _ColumnIdsArray_27.SetAt(10, 10);
      _ColumnNamesArray_27.SetAt(11, "SPositionBC");
      _ColumnIdsArray_27.SetAt(11, 11);
      _ColumnNamesArray_27.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_27.SetAt(12, 12);
      _ColumnNamesArray_27.SetAt(13, "UserName");
      _ColumnIdsArray_27.SetAt(13, 13);
      _ExperimentsArray_27.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_27, 0, _ColumnIdsArray_27, _ColumnNamesArray_27, _ExperimentsArray_27, "TransferToWaste_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Remove_ResidualEtOH <<<<<<<<<<"));
  }

  function Add_BeadFromTub( device & ML_STAR, sequence & seq_Beads, sequence & seq_Destination, sequence & seq_Tips, variable var_NumberSamples, variable var_BeadVolumePerWell, variable var_LLD_On, variable var_TipUsage ) void {
    private variable MixVolume_Beads;
    private variable MixCycles_Beads;
    private variable loopCounter2;
    private variable LC_Beads;
    private variable FixedHt_Dispense;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_BeadsFromTub <<<<<<<<<<"));
    Trace ("Volume of Beads per well:  ", var_BeadVolumePerWell);
    if (var_LLD_On == 0)
    {
      MECC::TraceComment(Translate("*** cLLD off for the dispense ***"));
      FixedHt_Dispense = 0.2;
    }
    else
    {
      MECC::TraceComment(Translate("*** cLLD on for the dispense ***"));
      FixedHt_Dispense = 0;
    }
    MECC::TraceComment(Translate("********** Fill plate with Beads ..........."));
    {
      loopCounter2 = 0;
      while (
         (seq_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_Destination, 1, seq_Tips, 1, seq_Beads, 1);
        loopCounter2 = loopCounter2 + 1;
        if (loopCounter2 == 1)
        {
          MixVolume_Beads = 300;
          MixCycles_Beads = 15;
        }
        else
        {
          if (var_TipUsage == 1)
          {
            MixVolume_Beads = var_BeadVolumePerWell;
            MixCycles_Beads = 1;
          }
          else
          {
            MixVolume_Beads = 0;
            MixCycles_Beads = 0;
          }
        }
        if (var_TipUsage == 1)
        {
          onerror goto errLabel_28 ;
          err.Clear();
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          errLabel_28 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            ErrorHandling_TipPickup(ML_STAR, seq_Tips);
          }   /* end if from skip handler if no error */
        }
        else
        {
          if (loopCounter2 == 1)
          {
            onerror goto errLabel_29 ;
            err.Clear();
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            errLabel_29 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              ErrorHandling_TipPickup(ML_STAR, seq_Tips);
            }   /* end if from skip handler if no error */
          }
        }
        if (loopCounter2 == 1)
        {
          LC_Beads = Translate("Nextera_SVF_SPB_Surface_Empty_FastMix");
        }
        else
        {
          LC_Beads = Translate("Nextera_SVF_SPB_Surface_Empty");
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (var_TipUsage == 1)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        if (
           (seq_Destination.GetCurrentPosition() > 0 && seq_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_Destination.SetMax(seq_Destination.GetTotal());
      seq_Tips.SetMax(seq_Tips.GetTotal());
      seq_Beads.SetMax(seq_Beads.GetTotal());
      seq_Destination.SetCurrentPosition(1);
      seq_Beads.SetCurrentPosition(1);
    }
    if (var_TipUsage == 0)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_Beads);
    {
      variable _FilterIdsArray_30[];
      variable _ColumnIdsArray_30[];
      variable _ColumnNamesArray_30[];
      variable _ExperimentsArray_30[];
      _FilterIdsArray_30.SetSize(0);
      _ColumnNamesArray_30.SetSize(14);
      _ColumnIdsArray_30.SetSize(14);
      _ColumnNamesArray_30.SetAt(0, "RecordId");
      _ColumnIdsArray_30.SetAt(0, 0);
      _ColumnNamesArray_30.SetAt(1, "TRackBC");
      _ColumnIdsArray_30.SetAt(1, 1);
      _ColumnNamesArray_30.SetAt(2, "TLabwareId");
      _ColumnIdsArray_30.SetAt(2, 2);
      _ColumnNamesArray_30.SetAt(3, "TPositionId");
      _ColumnIdsArray_30.SetAt(3, 3);
      _ColumnNamesArray_30.SetAt(4, "TPositionBC");
      _ColumnIdsArray_30.SetAt(4, 4);
      _ColumnNamesArray_30.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_30.SetAt(5, 5);
      _ColumnNamesArray_30.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_30.SetAt(6, 6);
      _ColumnNamesArray_30.SetAt(7, "TVolume");
      _ColumnIdsArray_30.SetAt(7, 7);
      _ColumnNamesArray_30.SetAt(8, "SRackBC");
      _ColumnIdsArray_30.SetAt(8, 8);
      _ColumnNamesArray_30.SetAt(9, "SLabwareId");
      _ColumnIdsArray_30.SetAt(9, 9);
      _ColumnNamesArray_30.SetAt(10, "SPositionId");
      _ColumnIdsArray_30.SetAt(10, 10);
      _ColumnNamesArray_30.SetAt(11, "SPositionBC");
      _ColumnIdsArray_30.SetAt(11, 11);
      _ColumnNamesArray_30.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_30.SetAt(12, 12);
      _ColumnNamesArray_30.SetAt(13, "UserName");
      _ColumnIdsArray_30.SetAt(13, 13);
      _ExperimentsArray_30.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_Destination, 3, _FilterIdsArray_30, 0, _ColumnIdsArray_30, _ColumnNamesArray_30, _ExperimentsArray_30, "Beads_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_BeadsFromTub <<<<<<<<<<"));
  }

  function Add_EWS( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight ) void {
    private variable PositionID_Vial_1;
    private variable PositionID_Vial_2;
    private variable NumberSamplesMoreThan48;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable LabwareID_Vial;
    private variable NumberSamplesUpTo48;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_EWS <<<<<<<<<<"));
    if (var_NumberOfSamples > 48)
    {
      NumberSamplesMoreThan48 = var_NumberOfSamples - 48;
      NumberSamplesUpTo48 = var_NumberOfSamples - (2 * NumberSamplesMoreThan48);
    }
    else
    {
      NumberSamplesMoreThan48 = 0;
      NumberSamplesUpTo48 = var_NumberOfSamples;
    }
    LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
    PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
    SeqIncrement(seq_AspirationPosition, 1);
    PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
    SeqRemoveAll(seq_AspirationPosition);
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
      }
    }
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
      }
    }
    seq_AspirationPosition.SetCurrentPosition(1);
    MECC::TraceComment(Translate("********** Now pipetting reagent to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_31 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_31 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse.SetMax(seq_TipsToUse.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_6[];
      variable _ColumnIdsArray_6[];
      variable _ColumnNamesArray_6[];
      variable _ExperimentsArray_6[];
      _FilterIdsArray_6.SetSize(0);
      _ColumnNamesArray_6.SetSize(14);
      _ColumnIdsArray_6.SetSize(14);
      _ColumnNamesArray_6.SetAt(0, "RecordId");
      _ColumnIdsArray_6.SetAt(0, 0);
      _ColumnNamesArray_6.SetAt(1, "TRackBC");
      _ColumnIdsArray_6.SetAt(1, 1);
      _ColumnNamesArray_6.SetAt(2, "TLabwareId");
      _ColumnIdsArray_6.SetAt(2, 2);
      _ColumnNamesArray_6.SetAt(3, "TPositionId");
      _ColumnIdsArray_6.SetAt(3, 3);
      _ColumnNamesArray_6.SetAt(4, "TPositionBC");
      _ColumnIdsArray_6.SetAt(4, 4);
      _ColumnNamesArray_6.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_6.SetAt(5, 5);
      _ColumnNamesArray_6.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_6.SetAt(6, 6);
      _ColumnNamesArray_6.SetAt(7, "TVolume");
      _ColumnIdsArray_6.SetAt(7, 7);
      _ColumnNamesArray_6.SetAt(8, "SRackBC");
      _ColumnIdsArray_6.SetAt(8, 8);
      _ColumnNamesArray_6.SetAt(9, "SLabwareId");
      _ColumnIdsArray_6.SetAt(9, 9);
      _ColumnNamesArray_6.SetAt(10, "SPositionId");
      _ColumnIdsArray_6.SetAt(10, 10);
      _ColumnNamesArray_6.SetAt(11, "SPositionBC");
      _ColumnIdsArray_6.SetAt(11, 11);
      _ColumnNamesArray_6.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_6.SetAt(12, 12);
      _ColumnNamesArray_6.SetAt(13, "UserName");
      _ColumnIdsArray_6.SetAt(13, 13);
      _ExperimentsArray_6.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_6, 0, _ColumnIdsArray_6, _ColumnNamesArray_6, _ExperimentsArray_6, "Reagent_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_EWS <<<<<<<<<<"));
  }

  function Add_Ethanol( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_TipsToUse1000ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_LiquidClassEthanol, variable & var_TrackingEthanolVolume ) void {
    private variable VolumeToAspirate_8channels_mL;
    private variable ret_PositionsEthanol;
    private variable AspVolume_Ethanol1;
    private variable AspVolume_Ethanol;
    private variable ret_MeasuredVol_Ch1;
    private variable AspVolume_Ethanol2;
    private variable AspVolume_Ethanol3;
    private variable NumberOfColumns;
    private variable VolAsp8ch_mL_inclDeadVol;
    private variable NumberOfDispenses1;
    private variable MixCycles;
    private variable VolumeToAspirate;
    private variable NumberOfDispenses2;
    private variable Vol_Ch1;
    private variable ActualIncubationDuration;
    private variable NumberOfDispenses3;
    private variable Pointer_EthanolSequence;
    private variable VolumeToAspirate_8channels_uL;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable NumberOfDispenses;
    private variable NumberOfAspirations;
    private variable SimOn;
    private timer Incubate30sec;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_Ethanol <<<<<<<<<<"));
    NumberOfCompleteColumns = var_NumberOfSamples / 8;
    RemainingWells = var_NumberOfSamples % 8;
    Trace ("Number of Complete Columns in Destination Plate:  ", NumberOfCompleteColumns);
    Trace ("Number of Wells in Last, Incomplete Column:  ", RemainingWells);
    if (RemainingWells > 0)
    {
      NumberOfColumns = NumberOfCompleteColumns + 1;
    }
    else
    {
      NumberOfColumns = NumberOfCompleteColumns;
    }
    AspVolume_Ethanol = 200 * NumberOfColumns;
    Trace ("Required Total Volume for Ethanol, Per Row, Max = ", AspVolume_Ethanol);
    if (AspVolume_Ethanol <= 1000)
    {
      NumberOfAspirations = 1;
      NumberOfDispenses1 = NumberOfColumns;
      AspVolume_Ethanol1 = AspVolume_Ethanol;
    }
    else
    {
      NumberOfAspirations = AspVolume_Ethanol / (1000 * 1.0);
      NumberOfAspirations = MthCeiling(NumberOfAspirations);
      NumberOfDispenses1 = 5;
      NumberOfDispenses2 = NumberOfColumns - NumberOfDispenses1;
      if (NumberOfDispenses2 > 5)
      {
        NumberOfDispenses3 = NumberOfDispenses2 - 5;
        NumberOfDispenses2 = 5;
      }
      AspVolume_Ethanol1 = 200 * NumberOfDispenses1;
      AspVolume_Ethanol2 = 200 * NumberOfDispenses2;
      AspVolume_Ethanol3 = 200 * NumberOfDispenses3;
    }
    Trace ("Number of Aspirations:  ", NumberOfAspirations);
    Trace ("Number of Columns for the first set of dispenses:  ", NumberOfDispenses1);
    Trace ("Number of Columns for the second set of dispenses:  ", NumberOfDispenses2);
    Trace ("Number of Columns for the third set of dispenses:  ", NumberOfDispenses3);
    Trace ("Aspiration volume for the first set of dispenses:  ", AspVolume_Ethanol1);
    Trace ("Aspiration volume for the second set of dispenses:  ", AspVolume_Ethanol2);
    Trace ("Aspiration volume for the third set of dispenses:  ", AspVolume_Ethanol3);
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    {
      loopCounter4 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse1000ul, 1);
        loopCounter4 = loopCounter4 + 1;
        if (loopCounter4 == 1)
        {
          onerror goto errLabel_32 ;
          err.Clear();
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          errLabel_32 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse1000ul);
          }   /* end if from skip handler if no error */
          VolumeToAspirate = AspVolume_Ethanol1;
          NumberOfDispenses = NumberOfDispenses1;
          MixCycles = 1;
        }
        if (loopCounter4 == 2)
        {
          VolumeToAspirate = AspVolume_Ethanol2;
          NumberOfDispenses = NumberOfDispenses2;
          MixCycles = 0;
        }
        if (loopCounter4 == 3)
        {
          VolumeToAspirate = AspVolume_Ethanol3;
          NumberOfDispenses = NumberOfDispenses3;
          MixCycles = 0;
        }
        MECC::TraceComment(Translate("Need to determine if there is enough liquid in the tub for the next aspiration step. "));
        Trace (">>> Expected ethanol volume in tub:  ", var_TrackingEthanolVolume);
        if (var_TrackingEthanolVolume <= 0)
        {
          MECC::TraceComment(Translate("At the start of a run, or if going to a new or refilled tub, the volume is unknown, so we have to measure it:"));
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ret_MeasuredVol_Ch1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, seq_AspirationPosition, 0, Translate("10000000"), 0, 0, 0);
          Vol_Ch1 = HSLML_STAR::GetContainerVolume(1);
          var_TrackingEthanolVolume = Vol_Ch1;
          SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
          if (SimOn == 1)
          {
            var_TrackingEthanolVolume = 12;
          }
          Trace (">>> After the cLLD check, the ethanol volume in tub is:  ", var_TrackingEthanolVolume);
        }
        VolumeToAspirate_8channels_uL = VolumeToAspirate * 8;
        VolumeToAspirate_8channels_mL = VolumeToAspirate_8channels_uL / (1000 * 1.0);
        VolAsp8ch_mL_inclDeadVol = VolumeToAspirate_8channels_mL + 2;
        Trace (">>> Next step needs this volume in tube (mL), including dead volume:  ", VolAsp8ch_mL_inclDeadVol);
        if (VolAsp8ch_mL_inclDeadVol > var_TrackingEthanolVolume)
        {
          MECC::TraceComment(Translate("***** Insufficient volume of ethanol in tub.  Go to next tub, if available. *****"));
          var_TrackingEthanolVolume = 0;
          ret_PositionsEthanol = SeqGetTotal(seq_AspirationPosition);
          if (ret_PositionsEthanol >= 16)
          {
            Pointer_EthanolSequence = seq_AspirationPosition.GetCurrentPosition();
            if (Pointer_EthanolSequence <= 9)
            {
              SeqIncrement(seq_AspirationPosition, 8);
              MECC::TraceComment(Translate("***** Sequence incremented.  Going to next tub. Need to measure volume in tub. *****"));
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ret_MeasuredVol_Ch1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, seq_AspirationPosition, 0, Translate("10000000"), 0, 0, 0);
              Vol_Ch1 = HSLML_STAR::GetContainerVolume(1);
              var_TrackingEthanolVolume = Vol_Ch1;
              SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
              if (SimOn == 1)
              {
                var_TrackingEthanolVolume = 12;
              }
              Trace ("After the cLLD check, the ethanol volume in tub is:  ", var_TrackingEthanolVolume);
              if (VolAsp8ch_mL_inclDeadVol > var_TrackingEthanolVolume)
              {
                MECC::TraceComment(Translate("***** INADEQUATE VOLUME IN NEW TUB.  ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION.  *****"));
              }
            }
            else
            {
              MECC::TraceComment(Translate("***** Sequence not incremented.  No other tubs available.  *****\n***** ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION. *****"));
            }
          }
          else
          {
            MECC::TraceComment(Translate("***** Sequence not incremented.  No other tubs available.  *****\n***** ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION. *****"));
          }
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        var_TrackingEthanolVolume = var_TrackingEthanolVolume - VolumeToAspirate_8channels_mL;
        Trace ("New, calculated ethanol volume in tub:  ", var_TrackingEthanolVolume);
        {
          for(loopCounter3 = 0; loopCounter3 < NumberOfDispenses;)
          {
            loopCounter3 = loopCounter3 + 1;
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
        if (loopCounter4 == 1)
        {
          if( 0 == Incubate30sec.SetTimer(23) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse1000ul.SetMax(seq_TipsToUse1000ul.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_33[];
      variable _ColumnIdsArray_33[];
      variable _ColumnNamesArray_33[];
      variable _ExperimentsArray_33[];
      _FilterIdsArray_33.SetSize(0);
      _ColumnNamesArray_33.SetSize(14);
      _ColumnIdsArray_33.SetSize(14);
      _ColumnNamesArray_33.SetAt(0, "RecordId");
      _ColumnIdsArray_33.SetAt(0, 0);
      _ColumnNamesArray_33.SetAt(1, "TRackBC");
      _ColumnIdsArray_33.SetAt(1, 1);
      _ColumnNamesArray_33.SetAt(2, "TLabwareId");
      _ColumnIdsArray_33.SetAt(2, 2);
      _ColumnNamesArray_33.SetAt(3, "TPositionId");
      _ColumnIdsArray_33.SetAt(3, 3);
      _ColumnNamesArray_33.SetAt(4, "TPositionBC");
      _ColumnIdsArray_33.SetAt(4, 4);
      _ColumnNamesArray_33.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_33.SetAt(5, 5);
      _ColumnNamesArray_33.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_33.SetAt(6, 6);
      _ColumnNamesArray_33.SetAt(7, "TVolume");
      _ColumnIdsArray_33.SetAt(7, 7);
      _ColumnNamesArray_33.SetAt(8, "SRackBC");
      _ColumnIdsArray_33.SetAt(8, 8);
      _ColumnNamesArray_33.SetAt(9, "SLabwareId");
      _ColumnIdsArray_33.SetAt(9, 9);
      _ColumnNamesArray_33.SetAt(10, "SPositionId");
      _ColumnIdsArray_33.SetAt(10, 10);
      _ColumnNamesArray_33.SetAt(11, "SPositionBC");
      _ColumnIdsArray_33.SetAt(11, 11);
      _ColumnNamesArray_33.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_33.SetAt(12, 12);
      _ColumnNamesArray_33.SetAt(13, "UserName");
      _ColumnIdsArray_33.SetAt(13, 13);
      _ExperimentsArray_33.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_33, 0, _ColumnIdsArray_33, _ColumnNamesArray_33, _ExperimentsArray_33, "Ethanol_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    seq_DispensePosition.SetCurrentPosition(1);
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    if( 0 == Incubate30sec.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    ActualIncubationDuration = Incubate30sec.GetElapsedTime();
    Trace ("***** Actual incubation time (expected minimum 30 seconds for first column of wells):  ", ActualIncubationDuration);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_Ethanol <<<<<<<<<<"));
  }

  function Transfer_EnrichmentMixture( device & ML_STAR, sequence & seq_TipsToUse, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer ) void {
    private variable loopCounter1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Transfer_EnrichmentMixture <<<<<<<<<<"));
    {
      loopCounter1 = 0;
      while (
         (seq_AspirationPosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_34 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_34 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse.SetMax(seq_TipsToUse.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_2[];
      variable _ColumnIdsArray_2[];
      variable _ColumnNamesArray_2[];
      variable _ExperimentsArray_2[];
      _FilterIdsArray_2.SetSize(0);
      _ColumnNamesArray_2.SetSize(14);
      _ColumnIdsArray_2.SetSize(14);
      _ColumnNamesArray_2.SetAt(0, "RecordId");
      _ColumnIdsArray_2.SetAt(0, 0);
      _ColumnNamesArray_2.SetAt(1, "TRackBC");
      _ColumnIdsArray_2.SetAt(1, 1);
      _ColumnNamesArray_2.SetAt(2, "TLabwareId");
      _ColumnIdsArray_2.SetAt(2, 2);
      _ColumnNamesArray_2.SetAt(3, "TPositionId");
      _ColumnIdsArray_2.SetAt(3, 3);
      _ColumnNamesArray_2.SetAt(4, "TPositionBC");
      _ColumnIdsArray_2.SetAt(4, 4);
      _ColumnNamesArray_2.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_2.SetAt(5, 5);
      _ColumnNamesArray_2.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_2.SetAt(6, 6);
      _ColumnNamesArray_2.SetAt(7, "TVolume");
      _ColumnIdsArray_2.SetAt(7, 7);
      _ColumnNamesArray_2.SetAt(8, "SRackBC");
      _ColumnIdsArray_2.SetAt(8, 8);
      _ColumnNamesArray_2.SetAt(9, "SLabwareId");
      _ColumnIdsArray_2.SetAt(9, 9);
      _ColumnNamesArray_2.SetAt(10, "SPositionId");
      _ColumnIdsArray_2.SetAt(10, 10);
      _ColumnNamesArray_2.SetAt(11, "SPositionBC");
      _ColumnIdsArray_2.SetAt(11, 11);
      _ColumnNamesArray_2.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_2.SetAt(12, 12);
      _ColumnNamesArray_2.SetAt(13, "UserName");
      _ColumnIdsArray_2.SetAt(13, 13);
      _ExperimentsArray_2.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_2, 0, _ColumnIdsArray_2, _ColumnNamesArray_2, _ExperimentsArray_2, "TransferPlateToPlate_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Transfer_EnrichmentMixture <<<<<<<<<<"));
  }

  function Add_AmpureSingle( device & ML_STAR, sequence & seq_AmpureBeads, sequence & seq_Destination, sequence & seq_Tips, variable var_NumberSamples, variable var_BeadVolumePerWell, variable var_LLD_On, variable var_TipUsage ) void {
    private variable MixVolume_Beads;
    private variable MixCycles_Beads;
    private variable loopCounter2;
    private variable LC_Beads;
    private variable FixedHt_Dispense;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_AmpureSingle <<<<<<<<<<"));
    Trace ("Volume of AMPure XP Beads per well:  ", var_BeadVolumePerWell);
    if (var_LLD_On == 0)
    {
      MECC::TraceComment(Translate("*** cLLD off for the dispense ***"));
      FixedHt_Dispense = 0.2;
    }
    else
    {
      MECC::TraceComment(Translate("*** cLLD on for the dispense ***"));
      FixedHt_Dispense = 0;
    }
    MECC::TraceComment(Translate("********** Fill plate with AMPure XP Beads ..........."));
    {
      loopCounter2 = 0;
      while (
         (seq_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AmpureBeads, 1, seq_Destination, 1, seq_Tips, 1);
        loopCounter2 = loopCounter2 + 1;
        if (loopCounter2 == 1)
        {
          MixVolume_Beads = 300;
          MixCycles_Beads = 20;
        }
        else
        {
          if (var_TipUsage == 1)
          {
            MixVolume_Beads = var_BeadVolumePerWell;
            MixCycles_Beads = 5;
          }
          else
          {
            MixVolume_Beads = 0;
            MixCycles_Beads = 5;
          }
        }
        if (var_TipUsage == 1)
        {
          onerror goto errLabel_35 ;
          err.Clear();
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          errLabel_35 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            ErrorHandling_TipPickup(ML_STAR, seq_Tips);
          }   /* end if from skip handler if no error */
        }
        else
        {
          if (loopCounter2 == 1)
          {
            onerror goto errLabel_36 ;
            err.Clear();
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            errLabel_36 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              ErrorHandling_TipPickup(ML_STAR, seq_Tips);
            }   /* end if from skip handler if no error */
          }
        }
        if (loopCounter2 == 1)
        {
          LC_Beads = Translate("TruSeq_SVF_Ampure_Surface_Empty_FastMix");
        }
        else
        {
          LC_Beads = Translate("TruSeq_SVF_Ampure_Surface_Empty");
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (var_TipUsage == 1)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        if (
           (seq_Destination.GetCurrentPosition() > 0 && seq_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AmpureBeads.SetMax(seq_AmpureBeads.GetTotal());
      seq_Destination.SetMax(seq_Destination.GetTotal());
      seq_Tips.SetMax(seq_Tips.GetTotal());
      seq_AmpureBeads.SetCurrentPosition(1);
      seq_Destination.SetCurrentPosition(1);
    }
    if (var_TipUsage == 0)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AmpureBeads);
    {
      variable _FilterIdsArray_37[];
      variable _ColumnIdsArray_37[];
      variable _ColumnNamesArray_37[];
      variable _ExperimentsArray_37[];
      _FilterIdsArray_37.SetSize(0);
      _ColumnNamesArray_37.SetSize(14);
      _ColumnIdsArray_37.SetSize(14);
      _ColumnNamesArray_37.SetAt(0, "RecordId");
      _ColumnIdsArray_37.SetAt(0, 0);
      _ColumnNamesArray_37.SetAt(1, "TRackBC");
      _ColumnIdsArray_37.SetAt(1, 1);
      _ColumnNamesArray_37.SetAt(2, "TLabwareId");
      _ColumnIdsArray_37.SetAt(2, 2);
      _ColumnNamesArray_37.SetAt(3, "TPositionId");
      _ColumnIdsArray_37.SetAt(3, 3);
      _ColumnNamesArray_37.SetAt(4, "TPositionBC");
      _ColumnIdsArray_37.SetAt(4, 4);
      _ColumnNamesArray_37.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_37.SetAt(5, 5);
      _ColumnNamesArray_37.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_37.SetAt(6, 6);
      _ColumnNamesArray_37.SetAt(7, "TVolume");
      _ColumnIdsArray_37.SetAt(7, 7);
      _ColumnNamesArray_37.SetAt(8, "SRackBC");
      _ColumnIdsArray_37.SetAt(8, 8);
      _ColumnNamesArray_37.SetAt(9, "SLabwareId");
      _ColumnIdsArray_37.SetAt(9, 9);
      _ColumnNamesArray_37.SetAt(10, "SPositionId");
      _ColumnIdsArray_37.SetAt(10, 10);
      _ColumnNamesArray_37.SetAt(11, "SPositionBC");
      _ColumnIdsArray_37.SetAt(11, 11);
      _ColumnNamesArray_37.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_37.SetAt(12, 12);
      _ColumnNamesArray_37.SetAt(13, "UserName");
      _ColumnIdsArray_37.SetAt(13, 13);
      _ExperimentsArray_37.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_Destination, 3, _FilterIdsArray_37, 0, _ColumnIdsArray_37, _ColumnNamesArray_37, _ExperimentsArray_37, "AMPureBeads_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_AmpureSingle <<<<<<<<<<"));
  }

  function Remove_ResidualEWS( device & ML_STAR, sequence & seq_TipsToUse50ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass ) void {
    private variable loopCounter1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Remove_ResidualEWS <<<<<<<<<<"));
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    {
      loopCounter1 = 0;
      while (
         (seq_AspirationPosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse50ul, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_38 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_38 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse50ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_27[];
      variable _ColumnIdsArray_27[];
      variable _ColumnNamesArray_27[];
      variable _ExperimentsArray_27[];
      _FilterIdsArray_27.SetSize(0);
      _ColumnNamesArray_27.SetSize(14);
      _ColumnIdsArray_27.SetSize(14);
      _ColumnNamesArray_27.SetAt(0, "RecordId");
      _ColumnIdsArray_27.SetAt(0, 0);
      _ColumnNamesArray_27.SetAt(1, "TRackBC");
      _ColumnIdsArray_27.SetAt(1, 1);
      _ColumnNamesArray_27.SetAt(2, "TLabwareId");
      _ColumnIdsArray_27.SetAt(2, 2);
      _ColumnNamesArray_27.SetAt(3, "TPositionId");
      _ColumnIdsArray_27.SetAt(3, 3);
      _ColumnNamesArray_27.SetAt(4, "TPositionBC");
      _ColumnIdsArray_27.SetAt(4, 4);
      _ColumnNamesArray_27.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_27.SetAt(5, 5);
      _ColumnNamesArray_27.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_27.SetAt(6, 6);
      _ColumnNamesArray_27.SetAt(7, "TVolume");
      _ColumnIdsArray_27.SetAt(7, 7);
      _ColumnNamesArray_27.SetAt(8, "SRackBC");
      _ColumnIdsArray_27.SetAt(8, 8);
      _ColumnNamesArray_27.SetAt(9, "SLabwareId");
      _ColumnIdsArray_27.SetAt(9, 9);
      _ColumnNamesArray_27.SetAt(10, "SPositionId");
      _ColumnIdsArray_27.SetAt(10, 10);
      _ColumnNamesArray_27.SetAt(11, "SPositionBC");
      _ColumnIdsArray_27.SetAt(11, 11);
      _ColumnNamesArray_27.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_27.SetAt(12, 12);
      _ColumnNamesArray_27.SetAt(13, "UserName");
      _ColumnIdsArray_27.SetAt(13, 13);
      _ExperimentsArray_27.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_27, 0, _ColumnIdsArray_27, _ColumnNamesArray_27, _ExperimentsArray_27, "TransferToWaste_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Remove_ResidualEWS <<<<<<<<<<"));
  }

  function Create_EnrichmentMixture_SingleMIDIwell( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition_Buffer, sequence & seq_AspirationPosition_NaOH, sequence & seq_DispensePosition, sequence & seq_TipsToUseBuffer, sequence & seq_TipsToUseForTransfer, variable var_VolPerSampleBuffer, variable var_VolPerSampleNaOH, variable var_LiquidClassBuffer, variable var_LiquidClassNaOH ) void {
    private variable PositionID_Vial_1;
    private variable AspVol_NaOH;
    private variable LabwareID_Vial;
    private variable AspVol_Buffer;
    private variable MixVol_Buffer;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Create_EnrichmentMixture_SingleMIDIwell <<<<<<<<<<"));
    LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition_Buffer);
    PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition_Buffer);
    SeqRemoveAll(seq_AspirationPosition_Buffer);
    SeqAdd(seq_AspirationPosition_Buffer, LabwareID_Vial, PositionID_Vial_1);
    seq_AspirationPosition_Buffer.SetCurrentPosition(1);
    LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition_NaOH);
    PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition_NaOH);
    SeqRemoveAll(seq_AspirationPosition_NaOH);
    SeqAdd(seq_AspirationPosition_NaOH, LabwareID_Vial, PositionID_Vial_1);
    seq_AspirationPosition_NaOH.SetCurrentPosition(1);
    AspVol_Buffer = var_VolPerSampleBuffer * var_NumberOfSamples;
    MECC::TraceComment(Translate("********** Now pipetting buffer to intermediate plate"));
    onerror goto errLabel_39 ;
    err.Clear();
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    errLabel_39 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      ErrorHandling_TipPickup(ML_STAR, seq_TipsToUseBuffer);
    }   /* end if from skip handler if no error */
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    AspVol_NaOH = var_VolPerSampleNaOH * var_NumberOfSamples;
    MECC::TraceComment(Translate("********** Now pipetting NaOH to intermediate containers, and mix"));
    onerror goto errLabel_40 ;
    err.Clear();
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    errLabel_40 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      ErrorHandling_TipPickup(ML_STAR, seq_TipsToUseForTransfer);
    }   /* end if from skip handler if no error */
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MixVol_Buffer = AspVol_Buffer * 0.7;
    MECC::TraceComment(Translate("********** Now mixing in intermediate plate"));
    onerror goto errLabel_41 ;
    err.Clear();
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    errLabel_41 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      ErrorHandling_TipPickup(ML_STAR, seq_TipsToUseBuffer);
    }   /* end if from skip handler if no error */
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Create_EnrichmentMixture_SingleMIDIwell <<<<<<<<<<"));
  }

  function Transfer_EnrichmentMixture_SingleSource( device & ML_STAR, sequence & seq_TipsToUse, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer ) void {
    private variable loopCounter1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Transfer_EnrichmentMixture_SingleSource <<<<<<<<<<"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_42 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_42 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse.SetMax(seq_TipsToUse.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_2[];
      variable _ColumnIdsArray_2[];
      variable _ColumnNamesArray_2[];
      variable _ExperimentsArray_2[];
      _FilterIdsArray_2.SetSize(0);
      _ColumnNamesArray_2.SetSize(14);
      _ColumnIdsArray_2.SetSize(14);
      _ColumnNamesArray_2.SetAt(0, "RecordId");
      _ColumnIdsArray_2.SetAt(0, 0);
      _ColumnNamesArray_2.SetAt(1, "TRackBC");
      _ColumnIdsArray_2.SetAt(1, 1);
      _ColumnNamesArray_2.SetAt(2, "TLabwareId");
      _ColumnIdsArray_2.SetAt(2, 2);
      _ColumnNamesArray_2.SetAt(3, "TPositionId");
      _ColumnIdsArray_2.SetAt(3, 3);
      _ColumnNamesArray_2.SetAt(4, "TPositionBC");
      _ColumnIdsArray_2.SetAt(4, 4);
      _ColumnNamesArray_2.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_2.SetAt(5, 5);
      _ColumnNamesArray_2.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_2.SetAt(6, 6);
      _ColumnNamesArray_2.SetAt(7, "TVolume");
      _ColumnIdsArray_2.SetAt(7, 7);
      _ColumnNamesArray_2.SetAt(8, "SRackBC");
      _ColumnIdsArray_2.SetAt(8, 8);
      _ColumnNamesArray_2.SetAt(9, "SLabwareId");
      _ColumnIdsArray_2.SetAt(9, 9);
      _ColumnNamesArray_2.SetAt(10, "SPositionId");
      _ColumnIdsArray_2.SetAt(10, 10);
      _ColumnNamesArray_2.SetAt(11, "SPositionBC");
      _ColumnIdsArray_2.SetAt(11, 11);
      _ColumnNamesArray_2.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_2.SetAt(12, 12);
      _ColumnNamesArray_2.SetAt(13, "UserName");
      _ColumnIdsArray_2.SetAt(13, 13);
      _ExperimentsArray_2.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_2, 0, _ColumnIdsArray_2, _ColumnNamesArray_2, _ExperimentsArray_2, "TransferPlateToPlate_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Transfer_EnrichmentMixture_SingleSource <<<<<<<<<<"));
  }

  function Add_BeadsFromVial_wNewTips_14samples_per_vial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse1000ul, sequence & seq_TipsToUseForTransfer, variable var_VolPerSampleWell, variable var_LiquidClass1ml_Premix, variable var_LiquidClassForTransfer ) void {
    private variable MixVolume2;
    private variable PositionID_Vial_1;
    private variable PositionID_Vial_2;
    private variable TotalVolume;
    private variable ChPatternMixing;
    private variable loopCounter1;
    private variable RemainingVolume;
    private variable loopCounter2;
    private variable LabwareID_Vial;
    private variable MixVolume1;
    private variable arr_MixVols[];
    private variable First14Volume;
    private variable NumberSamplesMoreThan14;
    private variable NumberSamplesUpTo14;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_BeadsFromVial_wNewTips_14samples_per_vial <<<<<<<<<<"));
    TotalVolume = var_VolPerSampleWell * var_NumberOfSamples;
    TotalVolume = TotalVolume + 500;
    if (var_NumberOfSamples > 14)
    {
      ChPatternMixing = Translate("11000000");
      First14Volume = var_VolPerSampleWell * 14;
      RemainingVolume = TotalVolume - First14Volume;
      MixVolume1 = First14Volume / (2 * 1.0);
      MixVolume2 = RemainingVolume / (2 * 1.0);
      if (MixVolume1 > 1000)
      {
        MixVolume1 = 1000;
      }
      if (MixVolume2 > 1000)
      {
        MixVolume2 = 1000;
      }
    }
    else
    {
      ChPatternMixing = Translate("10000000");
      MixVolume1 = TotalVolume / (2 * 1.0);
      if (MixVolume1 > 1000)
      {
        MixVolume1 = 1000;
      }
    }
    Trace ("Volume per sample well:  ", var_VolPerSampleWell);
    Trace ("Mix volume, channel 1:  ", MixVolume1);
    Trace ("Mix volume, channel 2:  ", MixVolume2);
    arr_MixVols.SetSize(2);
    arr_MixVols.SetAt(1-1, MixVolume1);
    arr_MixVols.SetAt(2-1, MixVolume2);
    MECC::TraceComment(Translate("********* Premix in vial with 1 or 2 1ml Tips ***********"));
    onerror goto errLabel_43 ;
    err.Clear();
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    errLabel_43 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse1000ul);
    }   /* end if from skip handler if no error */
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    if (var_NumberOfSamples > 14)
    {
      NumberSamplesMoreThan14 = var_NumberOfSamples - 14;
      NumberSamplesUpTo14 = var_NumberOfSamples - (2 * NumberSamplesMoreThan14);
    }
    else
    {
      NumberSamplesMoreThan14 = 0;
      NumberSamplesUpTo14 = var_NumberOfSamples;
    }
    LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
    PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
    SeqIncrement(seq_AspirationPosition, 1);
    PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
    SeqRemoveAll(seq_AspirationPosition);
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan14;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
      }
    }
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo14;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
      }
    }
    seq_AspirationPosition.SetCurrentPosition(1);
    if(0){
      Util2::Debug::TraceSequence(seq_AspirationPosition);
    }
    MECC::TraceComment(Translate("********** Now pipetting beads to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUseForTransfer, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_44 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_44 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUseForTransfer);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUseForTransfer.SetMax(seq_TipsToUseForTransfer.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_BeadsFromVial_wNewTips_14samples_per_vial <<<<<<<<<<"));
  }

  function Add_EWS_FromTub( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight ) void {
    private variable loopCounter1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_EWS_FromTub <<<<<<<<<<"));
    MECC::TraceComment(Translate("********** Now pipetting reagent to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_45 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_45 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse.SetMax(seq_TipsToUse.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_6[];
      variable _ColumnIdsArray_6[];
      variable _ColumnNamesArray_6[];
      variable _ExperimentsArray_6[];
      _FilterIdsArray_6.SetSize(0);
      _ColumnNamesArray_6.SetSize(14);
      _ColumnIdsArray_6.SetSize(14);
      _ColumnNamesArray_6.SetAt(0, "RecordId");
      _ColumnIdsArray_6.SetAt(0, 0);
      _ColumnNamesArray_6.SetAt(1, "TRackBC");
      _ColumnIdsArray_6.SetAt(1, 1);
      _ColumnNamesArray_6.SetAt(2, "TLabwareId");
      _ColumnIdsArray_6.SetAt(2, 2);
      _ColumnNamesArray_6.SetAt(3, "TPositionId");
      _ColumnIdsArray_6.SetAt(3, 3);
      _ColumnNamesArray_6.SetAt(4, "TPositionBC");
      _ColumnIdsArray_6.SetAt(4, 4);
      _ColumnNamesArray_6.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_6.SetAt(5, 5);
      _ColumnNamesArray_6.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_6.SetAt(6, 6);
      _ColumnNamesArray_6.SetAt(7, "TVolume");
      _ColumnIdsArray_6.SetAt(7, 7);
      _ColumnNamesArray_6.SetAt(8, "SRackBC");
      _ColumnIdsArray_6.SetAt(8, 8);
      _ColumnNamesArray_6.SetAt(9, "SLabwareId");
      _ColumnIdsArray_6.SetAt(9, 9);
      _ColumnNamesArray_6.SetAt(10, "SPositionId");
      _ColumnIdsArray_6.SetAt(10, 10);
      _ColumnNamesArray_6.SetAt(11, "SPositionBC");
      _ColumnIdsArray_6.SetAt(11, 11);
      _ColumnNamesArray_6.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_6.SetAt(12, 12);
      _ColumnNamesArray_6.SetAt(13, "UserName");
      _ColumnIdsArray_6.SetAt(13, 13);
      _ExperimentsArray_6.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_6, 0, _ColumnIdsArray_6, _ColumnNamesArray_6, _ExperimentsArray_6, "Reagent_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_EWS_FromTub <<<<<<<<<<"));
  }

  function ErrorHandling_TipPickup( device & ML_STAR, sequence & seq_TipsToUse ) void {
    private dialog customDialog_46;
    private dialog dialogHandle_47;
    private dialog dialogHandle_48;
    private dialog customDialog_49;
    private variable loopCounter_ChannelsNoTips;
    private variable ret_AbortMethod;
    private variable var_DialogBoxString;
    private variable ret_ReloadTips;
    private variable flag_SkipToNextTipRack;
    private variable channelIndex;
    private variable var_TipSequenceCurrentPosition;
    private variable var_NumberChannelsWithNoTips;
    private variable var_PickupPattern;
    private variable var_NumberTipsRemaining;
    private variable var_NoTipChannelString;
    private variable firmwareReturn;
    private variable var_Channel;
    private variable isTipPresent;
    private variable var_TipPickupPattern;
    private variable ret_RetryNextTipRack;
    private variable Labware_ID;
    private variable var_TipSequenceEndPosition;
    private variable Tip_Counter;
    private variable SimOn;
    private variable firmwareCommand;
    private variable arr_ChannelsNoTip[];
    MECC::TraceComment(Translate("START TIP PICKUP ERROR HANDLING"));
    SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
    if (SimOn == 0)
    {
      var_PickupPattern = Translate("");
      arr_ChannelsNoTip.SetSize(0);
      {
        for(channelIndex = 0; channelIndex < 8;)
        {
          channelIndex = channelIndex + 1;
          firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
            	firmwareReturn = arrRetValues[3];
          }
          isTipPresent = StrMid(firmwareReturn, 5, 1);
          if (isTipPresent == "1")
          {
            var_TipPickupPattern = Translate("0");
          }
          else
          {
            var_TipPickupPattern = Translate("1");
            arr_ChannelsNoTip.AddAsLast(channelIndex);
          }
          var_PickupPattern = var_PickupPattern + var_TipPickupPattern;
        }
      }
      var_NumberChannelsWithNoTips=arr_ChannelsNoTip.GetSize();
      var_NoTipChannelString = Translate("");
      {
        for(loopCounter_ChannelsNoTips = 0; loopCounter_ChannelsNoTips < var_NumberChannelsWithNoTips;)
        {
          loopCounter_ChannelsNoTips = loopCounter_ChannelsNoTips + 1;
          var_Channel=arr_ChannelsNoTip.GetAt(loopCounter_ChannelsNoTips-1);
          var_Channel = StrIStr(var_Channel);
          if (loopCounter_ChannelsNoTips != 1)
          {
            var_Channel = StrConcat2(Translate(", "), var_Channel);
          }
          var_NoTipChannelString = var_NoTipChannelString + var_Channel;
        }
      }
      var_TipSequenceCurrentPosition = seq_TipsToUse.GetCurrentPosition();
      var_TipSequenceEndPosition = seq_TipsToUse.GetCount();
      var_NumberTipsRemaining = var_TipSequenceEndPosition - var_TipSequenceCurrentPosition;
      var_NumberTipsRemaining = var_NumberTipsRemaining + 1;
      flag_SkipToNextTipRack = 1;
      if (var_NumberTipsRemaining <= 96)
      {
        flag_SkipToNextTipRack = 0;
      }
      var_DialogBoxString = StrConcat4(Translate("Channel(s) "), var_NoTipChannelString, Translate(" were not able to pick up the requested tip type."), Translate(""));
      customDialog_49.InitCustomDialog("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");
      customDialog_49.SetCustomDialogProperty( "radioButton2.IsEnabled", flag_SkipToNextTipRack );
      customDialog_49.ShowCustomDialog();
      ret_AbortMethod = customDialog_49.GetCustomDialogProperty( "ReturnValue" );
      ret_ReloadTips = customDialog_49.GetCustomDialogProperty( "radioButton1.IsChecked" );
      ret_RetryNextTipRack = customDialog_49.GetCustomDialogProperty( "radioButton2.IsChecked" );
      if (ret_AbortMethod == 2)
      {
        abort;
      }
      Labware_ID = SeqGetLabwareId(seq_TipsToUse);
      Labware_ID = StrLeft(Labware_ID, 3);
      if (Labware_ID == "TIP")
      {
        Tip_Counter = Translate("TruSeq_50F_Counter");
      }
      if (Labware_ID == "stf")
      {
        Tip_Counter = Translate("TruSeq_SVF_Counter");
      }
      if (Labware_ID == "HTF")
      {
        Tip_Counter = Translate("TruSeq_HVF_Counter");
      }
      if (ret_ReloadTips == 1)
      {
        PTL::ResetUnloadingStateAndSequences();
        PTL::SetUnloadingState("UserResponseTime", 0);
        PTL::SetUnloadingState("ErrorHandling", 3);
        PTL::SetUnloadingSize(1);
        PTL::SetUnloadingSequence(0, seq_TipsToUse, hslFalse, "");
        if( 0 == PTL::Unload(ML_STAR) )
        {
              PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        PTL::GetUnloadingSequence(0, seq_TipsToUse);
        customDialog_46.InitCustomDialog("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");
        customDialog_46.ShowCustomDialog();
        PTL::ResetLoadingStateAndSequences();
        PTL::SetLoadingState("UserResponseTime", hslInfinite);
        PTL::SetLoadingState("ErrorHandling", 3);
        PTL::SetLoadingState("CalibrateCarrierChannel", -1);
        PTL::SetLoadingSize(1);
        PTL::SetLoadingSequence(0, seq_TipsToUse, 1, -10, hslTrue, hslTrue, Tip_Counter);
        if( 0 == PTL::Load(ML_STAR, hslTrue) )
        {
              PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        PTL::GetLoadingSequence(0, seq_TipsToUse);
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        onerror goto errLabel_50 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_50 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          dialogHandle_48.SetOutput(Translate("The instrument is still having trouble picking up tips."), Translate("\n\nThe method will now abort."), Translate("\n\nIf this issue persists, please contact Hamilton Service."));
          dialogHandle_48.ShowOutput(Translate("Error Picking Up Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          abort;
        }   /* end if from skip handler if no error */
      }
      if (ret_RetryNextTipRack == 1)
      {
        if (var_TipSequenceCurrentPosition <= 96)
        {
          seq_TipsToUse.SetCurrentPosition(97);
        }
        else
        {
          if (var_TipSequenceCurrentPosition <= 192)
          {
            seq_TipsToUse.SetCurrentPosition(193);
          }
          else
          {
            if (var_TipSequenceCurrentPosition <= 288)
            {
              seq_TipsToUse.SetCurrentPosition(289);
            }
            else
            {
              if (var_TipSequenceCurrentPosition <= 384)
              {
                seq_TipsToUse.SetCurrentPosition(385);
              }
              else
              {
                if (var_TipSequenceCurrentPosition <= 480)
                {
                  seq_TipsToUse.SetCurrentPosition(481);
                }
                else
                {
                  if (var_TipSequenceCurrentPosition <= 576)
                  {
                    seq_TipsToUse.SetCurrentPosition(577);
                  }
                  else
                  {
                    if (var_TipSequenceCurrentPosition <= 672)
                    {
                      seq_TipsToUse.SetCurrentPosition(673);
                    }
                    else
                    {
                      if (var_TipSequenceCurrentPosition <= 768)
                      {
                        seq_TipsToUse.SetCurrentPosition(769);
                      }
                      else
                      {
                        if (var_TipSequenceCurrentPosition <= 864)
                        {
                        seq_TipsToUse.SetCurrentPosition(865);
                        }
                      }
                    }
                  }
                }
              }
            }
          }
        }
        onerror goto errLabel_51 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_51 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          dialogHandle_47.SetOutput(Translate("The instrument is still having trouble picking up tips."), Translate("\n\nThe method will now abort."), Translate("\n\nIf this issue persists, please contact Hamilton Service."));
          dialogHandle_47.ShowOutput(Translate("Error Picking Up Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          abort;
        }   /* end if from skip handler if no error */
      }
    }
    MECC::TraceComment(Translate("END TIP PICKUP ERROR HANDLING"));
  }
} // library namespace
