#pragma once
#include "HslHamHeaterShakerLib.hsl"
#include "HSLStrLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\Illumina\\Library\\HSLSensorLib.hsl"
#include "HSLInhecoTEC\\HSLInhecoTECLib.hsl"
#include "HSLTipCountingLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\Illumina\\Library\\RemoveTextDelimitersFromAsciiTextFile.hsl"
#include "FileHandling_HSLFiLibEx\\HSLFilLibEx.hsl"
#include "HSLSeqLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace TRUSEQPREP {
  private function A(  ) void ;
  function CheckCPACTemperature( variable var_CPACTemp, variable var_SimOn ) void ;
  function CheckPlatesInStacks( device & ML_STAR, sequence & seq_Stack1, sequence & seq_Stack2, sequence & seq_Stack3, sequence & seq_Stack4, variable var_Stack1Expected, variable var_Stack2Expected, variable var_Stack3Expected, variable var_Stack4Expected, variable & var_Result, variable & msg_Result ) void ;
  function GenerateTipCarrierBarcodeStrings( device & ML_STAR, sequence & seq_Tips50, sequence & seq_Tips300, sequence & seq_Tips1000, variable & var_50TipLoadString_2, variable & var_50TipLoadString_1, variable & var_300TipLoadString_2, variable & var_300TipLoadString_1, variable & var_1000TipLoadString ) void ;
  function GetHHSTemperature( variable var_HHS ) void ;
  function InitCPAC( variable var_SimMode ) void ;
  function InitHHSs( variable & var_HHSDeviceNo1, variable & var_HHSDeviceNo2, variable & var_HHSDeviceNo3, variable & var_HHSDeviceNo4, variable & var_HHSDeviceNo5, variable var_SimulationMode ) void ;
  function InitHHSs_StarDevice( device & ML_STAR, variable & var_HHSDeviceNo1, variable & var_HHSDeviceNo2, variable var_SimulationMode ) void ;
  function InitLiquidWasteSensor(  ) void ;
  function ReadSamplePlateFile( variable & var_SourceFile, variable & var_NumberOfSamples, variable & var_IndexesUsed, variable & arr_Index1SeqPositions[], variable & arr_Index2SeqPositions[], variable & arr_ALPseqPositions[] ) void ;
  function ReadSampleSheet( variable & var_SourceFile, variable & var_NumberOfSamples, variable & var_IndexesUsed, variable & arr_Index1SeqPositions[], variable & arr_Index2SeqPositions[], variable & arr_ALPseqPositions[] ) void ;
  private function ReportErrorTextCPAC( variable var_ErrorCPAC ) void ;
  function SetCPACTemperature( variable var_CPACTemp ) void ;
  function SetHHSTemperature( variable var_HHS_ID, variable var_Temperature ) void ;
  function Shake( variable var_HHS_ID, variable var_Speed, variable var_ShakingDuration ) void ;
  function TerminateCPAC(  ) void ;
  function TerminateHHSs(  ) void ;
  function TipCounterRead( device & ML_STAR, sequence & seq_Tips50, sequence & seq_Tips300, sequence & seq_Tips1000, variable var_Tip50_required, variable var_Tip300_required, variable var_Tip1000_required ) void ;
  function TipCounterWrite( device & ML_STAR, sequence & seq_Tips50, sequence & seq_Tips300, sequence & seq_Tips1000 ) void ;
  private function _Version(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  private function A(  ) void {
  }

  function InitHHSs( variable & var_HHSDeviceNo1, variable & var_HHSDeviceNo2, variable & var_HHSDeviceNo3, variable & var_HHSDeviceNo4, variable & var_HHSDeviceNo5, variable var_SimulationMode ) void {
    private variable ret_HHS1;
    private variable ret_HHS2;
    private variable ret_HHS3;
    private variable ret_HHS;
    private dialog dialogHandle_1;
    private variable ret_HHS4;
    private variable ret_HHS5;
    private dialog dialogHandle_2;
    var_HHSDeviceNo1 = 0;
    var_HHSDeviceNo2 = 0;
    var_HHSDeviceNo3 = 0;
    var_HHSDeviceNo4 = 0;
    var_HHSDeviceNo5 = 0;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  InitHHSs <<<<<<<<<<"));
    HSLHamHeaterShaker::SetSimulation(var_SimulationMode);
    ret_HHS = 0;
    ret_HHS1 = HSLHamHeaterShaker::CreateUsbDevice(1, var_HHSDeviceNo1);
    ret_HHS2 = HSLHamHeaterShaker::CreateUsbDevice(2, var_HHSDeviceNo2);
    ret_HHS3 = HSLHamHeaterShaker::CreateUsbDevice(3, var_HHSDeviceNo3);
    ret_HHS4 = HSLHamHeaterShaker::CreateUsbDevice(4, var_HHSDeviceNo4);
    ret_HHS5 = HSLHamHeaterShaker::CreateUsbDevice(5, var_HHSDeviceNo5);
    if (ret_HHS1 != 0)
    {
      Trace ("Error on HHS1:  ", ret_HHS1);
    }
    if (ret_HHS2 != 0)
    {
      Trace ("Error on HHS2:  ", ret_HHS2);
    }
    if (ret_HHS3 != 0)
    {
      Trace ("Error on HHS3:  ", ret_HHS3);
    }
    if (ret_HHS4 != 0)
    {
      Trace ("Error on HHS4:  ", ret_HHS4);
    }
    if (ret_HHS5 != 0)
    {
      Trace ("Error on HHS5:  ", ret_HHS5);
    }
    ret_HHS = ret_HHS1 + ret_HHS2 + ret_HHS3 + ret_HHS4 + ret_HHS5;
    if (ret_HHS > 0)
    {
      MECC::TraceComment(Translate("\n\nHHS Error codes:\n1 - Fatal Error\n2 - Node not Initialized\n3 - Device not connected\n4 - CAN error\n5 - EEProm error\n6 - Unknown command\n7 - Unknown parameter\n8 - Parameter out of range\n9 - Voltage error\n10 - Stop \n11 - Wrong address\n13 - Shaker init failed\n14 - Shaker not initialized\n15 - Shaker step loss\n17 - Plate lock init failure\n18 - Plate lock step loss\n26 - Unknown firmware error\n\n"));
      dialogHandle_1.SetOutput(Translate("There is a problem with one or more Hamilton Heater Shakers."), Translate("\n\nPlease check the following and then restart the method:"), Translate("\n\n     Verify HHS Controller Box is turned on."), Translate("\n     Verify the HHS USB cable is connected to the PC."));
      dialogHandle_1.ShowOutput(Translate("Problem with the HHS(s) - Method Will Abort"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      abort;
    }
    MECC::TraceComment(Translate("****** Set USB Trace to On (requires HHS library v4.4) *****"));
    HSLHamHeaterShaker::SetUSBTrace(1);
    MECC::TraceComment(Translate("****** Set all plate locks to open ****"));
    ret_HHS1 = HSLHamHeaterShaker::SetPlateLock(var_HHSDeviceNo1, 0);
    ret_HHS2 = HSLHamHeaterShaker::SetPlateLock(var_HHSDeviceNo2, 0);
    ret_HHS3 = HSLHamHeaterShaker::SetPlateLock(var_HHSDeviceNo3, 0);
    ret_HHS4 = HSLHamHeaterShaker::SetPlateLock(var_HHSDeviceNo4, 0);
    ret_HHS5 = HSLHamHeaterShaker::SetPlateLock(var_HHSDeviceNo5, 0);
    ret_HHS = ret_HHS1 + ret_HHS2 + ret_HHS3 + ret_HHS4 + ret_HHS5;
    if (ret_HHS > 0)
    {
      MECC::TraceComment(Translate("\n\nHHS Error codes:\n1 - Fatal Error\n2 - Node not Initialized\n3 - Device not connected\n4 - CAN error\n5 - EEProm error\n6 - Unknown command\n7 - Unknown parameter\n8 - Parameter out of range\n9 - Voltage error\n10 - Stop \n11 - Wrong address\n13 - Shaker init failed\n14 - Shaker not initialized\n15 - Shaker step loss\n17 - Plate lock init failure\n18 - Plate lock step loss\n26 - Unknown firmware error\n\n"));
      dialogHandle_2.SetOutput(Translate("There is a problem with one or more Hamilton Heater Shakers."), Translate("\n\nPlease check the trace.  Method will abort."));
      dialogHandle_2.ShowOutput(Translate("Problem with the HHS(s) - Method Will Abort"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      abort;
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  InitHHSs <<<<<<<<<<"));
  }

  function InitCPAC( variable var_SimMode ) void {
    private variable ret_InitCPAC;
    private variable ret_ErrorText;
    private variable ret_Error;
    private variable ret_MostRecentError;
    private variable answer_CPACerror;
    private variable ret_FWversion;
    private dialog dialogHandle_3;
    private dialog dialogHandle_4;
    MECC::TraceComment(Translate(">>>>>>>>>> InitCPAC:  Start Submethod <<<<<<<<<<"));
    HSLInhecoTECLib::Initialize(0, var_SimMode, ret_InitCPAC);
    if (var_SimMode == 0)
    {
      if (ret_InitCPAC != "000")
      {
        HSLInhecoTECLib::GetLastError(ret_MostRecentError);
        dialogHandle_4.SetOutput(Translate("There is an error with the CPAC Controller:\n\n     "), ret_MostRecentError, Translate("\n\nMake sure the unit is turned on and click OK to try again."));
        dialogHandle_4.ShowOutput(Translate("Problem with the CPAC Controller"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
        HSLInhecoTECLib::Initialize(0, 0, ret_InitCPAC);
        if (ret_InitCPAC != "000")
        {
          HSLInhecoTECLib::GetDescriptionForErrorCode(ret_InitCPAC, ret_ErrorText);
          dialogHandle_3.SetOutput(Translate("There is still an error with the CPAC Controller:\n\n     "), ret_ErrorText, Translate("\n\nClick Abort to end the method, or Ignore to go the next process step without connecting.  (Retry does nothing.)"));
          answer_CPACerror = dialogHandle_3.ShowOutput(Translate("Problem with the CPAC Controller"), hslAbortRetryIgnore | hslExclamation | hslDefButton1, hslInfinite);
          if (answer_CPACerror == 3)
          {
            abort;
          }
          if (answer_CPACerror == 4)
          {
            MECC::TraceComment(Translate("************ WARNING! Method will continue with the CPAC not working correctly ************"));
          }
          if (answer_CPACerror == 5)
          {
            MECC::TraceComment(Translate("************ WARNING! Method will continue with the CPAC not working correctly ************"));
          }
        }
      }
      HSLInhecoTECLib::SetTraceLevel(1);
      HSLInhecoTECLib::GetFirmwareVersion(0, 1, ret_FWversion, ret_Error);
      Trace ("Firmware version for CPAC:  ", ret_FWversion);
      ReportErrorTextCPAC(ret_Error);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> InitCPAC:  Submethod Complete <<<<<<<<<<"));
  }

  function Shake( variable var_HHS_ID, variable var_Speed, variable var_ShakingDuration ) void {
    private variable ActualShakingDuration;
    private timer Shaking;
    private variable CheckForEarlyStop;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Shake <<<<<<<<<<"));
    Trace ("***** Now shaking on HHS", var_HHS_ID, " at ", var_Speed, "rpm for ", var_ShakingDuration, "seconds...");
    HSLHamHeaterShaker::StartShaker(var_HHS_ID, var_Speed);
    if( 0 == Shaking.SetTimer(var_ShakingDuration) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    CheckForEarlyStop = Shaking.WaitTimer(hslTrue, hslTrue);
    if (0 == CheckForEarlyStop)
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (CheckForEarlyStop == 3)
    {
      MECC::TraceComment(Translate("***** WARNING!  The shaking was stopped prematurely by the operator! *****"));
    }
    ActualShakingDuration = Shaking.GetElapsedTime();
    Trace ("***** Actual Shaking Duration (seconds):  ", ActualShakingDuration);
    HSLHamHeaterShaker::StopShaker(var_HHS_ID);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Shake <<<<<<<<<<"));
  }

  function CheckPlatesInStacks( device & ML_STAR, sequence & seq_Stack1, sequence & seq_Stack2, sequence & seq_Stack3, sequence & seq_Stack4, variable var_Stack1Expected, variable var_Stack2Expected, variable var_Stack3Expected, variable var_Stack4Expected, variable & var_Result, variable & msg_Result ) void {
    private variable TopPlate_Stack3;
    private variable TopPlate_Stack4;
    private variable TopPlate_Stack1;
    private variable TopPlate_Stack2;
    private variable PlateNumber_TopStack1;
    private variable PlateNumber_TopStack2;
    private variable PlateNumber_TopStack3;
    private variable PlateNumber_TopStack4;
    private variable PlateNumber_TopStack4_int;
    private variable PlateNumber_TopStack1_int;
    private variable PlateNumber_TopStack2_int;
    private variable PlateNumber_TopStack3_int;
    var_Result = 0;
    msg_Result = 0;
    MECC::TraceComment(Translate(">>>>>>>>>> CheckPlatesInStacks:  Start Submethod <<<<<<<<<<"));
    msg_Result = Translate("Results of Checking Plates in Stacks:\n");
    var_Result = 0;
    if (var_Stack1Expected > 0)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._8E745E0A_158E_425e_BD3E_2F894E354A40("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"); // GetFirstPlatePosition
        	TopPlate_Stack1 = arrRetValues[3];
      }
      PlateNumber_TopStack1 = StrRight(TopPlate_Stack1, 1);
      PlateNumber_TopStack1_int = StrIVal(PlateNumber_TopStack1);
      if (PlateNumber_TopStack1 == "")
      {
        PlateNumber_TopStack1_int = 0;
      }
      Trace ("The number of plates found in Stack 1:  ", PlateNumber_TopStack1_int);
      Trace ("Expected number of plates for Stack 1:  ", var_Stack1Expected);
      if (PlateNumber_TopStack1_int == var_Stack1Expected)
      {
        msg_Result = msg_Result + Translate("\nThe correct number of plates are in Stack1.");
      }
      else
      {
        msg_Result = msg_Result + Translate("\nWARNING:  Wrong number of plates is in Stack1.  Expected:  ");
        msg_Result = StrConcat2(msg_Result, var_Stack1Expected);
        var_Result = 1;
      }
    }
    if (var_Stack2Expected > 0)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._8E745E0A_158E_425e_BD3E_2F894E354A40("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"); // GetFirstPlatePosition
        	TopPlate_Stack2 = arrRetValues[3];
      }
      PlateNumber_TopStack2 = StrRight(TopPlate_Stack2, 1);
      PlateNumber_TopStack2_int = StrIVal(PlateNumber_TopStack2);
      Trace ("The number of plates found in Stack 2:  ", PlateNumber_TopStack2_int);
      Trace ("Expected number of plates for Stack 2:  ", var_Stack2Expected);
      if (PlateNumber_TopStack2 == "")
      {
        PlateNumber_TopStack2_int = 0;
      }
      if (PlateNumber_TopStack2_int == var_Stack2Expected)
      {
        msg_Result = msg_Result + Translate("\nThe correct number of plates are in Stack2.");
      }
      else
      {
        msg_Result = msg_Result + Translate("\nWARNING:  Wrong number of plates is in Stack2.  Expected:  ");
        msg_Result = StrConcat2(msg_Result, var_Stack2Expected);
        var_Result = 1;
      }
    }
    if (var_Stack3Expected > 0)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._8E745E0A_158E_425e_BD3E_2F894E354A40("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"); // GetFirstPlatePosition
        	TopPlate_Stack3 = arrRetValues[3];
      }
      PlateNumber_TopStack3 = StrRight(TopPlate_Stack3, 1);
      PlateNumber_TopStack3_int = StrIVal(PlateNumber_TopStack3);
      if (PlateNumber_TopStack3 == "")
      {
        PlateNumber_TopStack3_int = 0;
      }
      Trace ("The number of plates found in Stack 3:  ", PlateNumber_TopStack3_int);
      Trace ("Expected number of plates for Stack 3:  ", var_Stack3Expected);
      if (PlateNumber_TopStack3_int == var_Stack3Expected)
      {
        msg_Result = msg_Result + Translate("\nThe correct number of plates are in Stack3.");
      }
      else
      {
        msg_Result = msg_Result + Translate("\nWARNING:  Wrong number of plates is in Stack3.  Expected:  ");
        msg_Result = StrConcat2(msg_Result, var_Stack3Expected);
        var_Result = 1;
      }
    }
    if (var_Stack4Expected > 0)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._8E745E0A_158E_425e_BD3E_2F894E354A40("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"); // GetFirstPlatePosition
        	TopPlate_Stack4 = arrRetValues[3];
      }
      PlateNumber_TopStack4 = StrRight(TopPlate_Stack4, 1);
      PlateNumber_TopStack4_int = StrIVal(PlateNumber_TopStack4);
      Trace ("The number of plates found in Stack 4:  ", PlateNumber_TopStack4_int);
      Trace ("Expected number of plates for Stack 4:  ", var_Stack4Expected);
      if (PlateNumber_TopStack4 == "")
      {
        PlateNumber_TopStack4_int = 0;
      }
      if (PlateNumber_TopStack4_int == var_Stack4Expected)
      {
        msg_Result = msg_Result + Translate("\nThe correct number of plates are in Stack4.");
      }
      else
      {
        msg_Result = msg_Result + Translate("\nWARNING:  Wrong number of plates is in Stack4.  Expected:  ");
        msg_Result = StrConcat2(msg_Result, var_Stack4Expected);
        var_Result = 1;
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> CheckPlatesInStacks:  Submethod Complete <<<<<<<<<<"));
  }

  function SetHHSTemperature( variable var_HHS_ID, variable var_Temperature ) void {
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  SetHHSTemperature <<<<<<<<<<"));
    HSLHamHeaterShaker::StopTempCtrl(var_HHS_ID);
    if (var_Temperature != 0)
    {
      Trace ("***** HHS number ", var_HHS_ID, " is being set to ", var_Temperature, "C");
      HSLHamHeaterShaker::StartTempCtrl(var_HHS_ID, var_Temperature, 0);
    }
    else
    {
      Trace ("***** HHS number ", var_HHS_ID, " is not being controlled, as it is desired to be at room temperature.");
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  SetHHSTemperature <<<<<<<<<<"));
  }

  function TerminateHHSs(  ) void {
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod: TerminateHHSs <<<<<<<<<<"));
    HSLHamHeaterShaker::StopAllShaker();
    HSLHamHeaterShaker::Terminate();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: TerminateHHSs <<<<<<<<<<"));
  }

  function TerminateCPAC(  ) void {
    private variable ret_Error;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod: TerminateCPAC <<<<<<<<<<"));
    HSLInhecoTECLib::StopTemperatureControl(0, 1, ret_Error);
    ReportErrorTextCPAC(ret_Error);
    HSLInhecoTECLib::Terminate();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: TerminateCPAC <<<<<<<<<<"));
  }

  function InitLiquidWasteSensor(  ) void {
    private dialog dialogHandle1;
    private variable ret_SensorStatus;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  InitLiquidWasteSensor <<<<<<<<<<"));
    SensorLib::Initialize(1);
    ret_SensorStatus = SensorLib::CheckLiquid();
    if (ret_SensorStatus == 0)
    {
      dialogHandle1.SetOutput(Translate("Check the level in the liquid waste carboy, and empty if full."));
      dialogHandle1.ShowOutput(Translate("Liquid Waste Full"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  InitLiquidWasteSensor <<<<<<<<<<"));
  }

  private function ReportErrorTextCPAC( variable var_ErrorCPAC ) void {
    private variable ret_ErrorText;
    if (var_ErrorCPAC != "TEC_0")
    {
      if (var_ErrorCPAC != "000")
      {
        HSLInhecoTECLib::GetDescriptionForErrorCode(var_ErrorCPAC, ret_ErrorText);
        Trace ("CPAC ERROR CODE:  ", var_ErrorCPAC);
        Trace ("CPAC ERROR MESSSAGE:  ", ret_ErrorText);
      }
    }
  }

  function TipCounterRead( device & ML_STAR, sequence & seq_Tips50, sequence & seq_Tips300, sequence & seq_Tips1000, variable var_Tip50_required, variable var_Tip300_required, variable var_Tip1000_required ) void {
    private variable Quantity_1000;
    private variable CurrentPosition_300;
    private variable Quantity_50;
    private variable CurrentPosition_50;
    private variable InsuffientTips;
    private variable Text_Insufficient50s;
    private variable Quantity_300;
    private variable EndPosition_300;
    private variable CurrentPosition_1000;
    private variable Text_Insufficient1000s;
    private variable Text_Insufficient300s;
    private variable EndPosition_1000;
    private variable EndPosition_50;
    private dialog dialogHandle_5;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  TipCounterRead<<<<<<<<<<"));
    TipCount::Edit2(seq_Tips50, Translate("TruSeq_50F_Counter"), ML_STAR, 999);
    TipCount::Edit2(seq_Tips300, Translate("TruSeq_SVF_Counter"), ML_STAR, 999);
    TipCount::Edit2(seq_Tips1000, Translate("TruSeq_HVF_Counter"), ML_STAR, 999);
    Text_Insufficient50s = Translate("");
    Text_Insufficient300s = Translate("");
    Text_Insufficient1000s = Translate("");
    CurrentPosition_50 = seq_Tips50.GetCurrentPosition();
    EndPosition_50 = seq_Tips50.GetCount();
    Quantity_50 = EndPosition_50 - CurrentPosition_50;
    Quantity_50 = Quantity_50 + 1;
    if (Quantity_50 < var_Tip50_required)
    {
      InsuffientTips = 1;
      if (var_Tip50_required > 960)
      {
        Text_Insufficient50s = Translate("\nPlease load two full carriers of 50ul tips.  You will need to come back later to replenish.");
      }
      else
      {
        Text_Insufficient50s = Translate("\nPlease load more 50ul tips.  You will need at least this many:  ");
        Text_Insufficient50s = StrConcat2(Text_Insufficient50s, var_Tip50_required);
      }
    }
    CurrentPosition_300 = seq_Tips300.GetCurrentPosition();
    EndPosition_300 = seq_Tips300.GetCount();
    Quantity_300 = EndPosition_300 - CurrentPosition_300;
    Quantity_300 = Quantity_300 + 1;
    if (Quantity_300 < var_Tip300_required)
    {
      InsuffientTips = 1;
      if (var_Tip300_required > 960)
      {
        Text_Insufficient300s = Translate("\nPlease load two full carriers of 300ul tips.  You will need to come back later to replenish.");
      }
      else
      {
        Text_Insufficient300s = Translate("\nPlease load more 300ul tips.  You will need at least this many:  ");
        Text_Insufficient300s = StrConcat2(Text_Insufficient300s, var_Tip300_required);
      }
    }
    CurrentPosition_1000 = seq_Tips1000.GetCurrentPosition();
    EndPosition_1000 = seq_Tips1000.GetCount();
    Quantity_1000 = EndPosition_1000 - CurrentPosition_1000;
    Quantity_1000 = Quantity_1000 + 1;
    if (Quantity_1000 < var_Tip1000_required)
    {
      InsuffientTips = 1;
      if (var_Tip1000_required > 120)
      {
        Text_Insufficient1000s = Translate("\nPlease load two full racks of 1000ul tips.  You will need to come back later to replenish.");
      }
      else
      {
        Text_Insufficient1000s = Translate("\nPlease load more 1000ul tips.  You will need at least this many:  ");
        Text_Insufficient1000s = StrConcat2(Text_Insufficient1000s, var_Tip1000_required);
      }
    }
    Trace ("---Number of 50uL tips required: ", var_Tip50_required);
    Trace ("---Number of 300uL tips required: ", var_Tip300_required);
    Trace ("---Number of 1000uL tips required: ", var_Tip1000_required);
    Trace ("...Number of 50uL tips remaining: ", Quantity_50);
    Trace ("...Number of 300uL tips remaining: ", Quantity_300);
    Trace ("...Number of 1000uL tips remaining: ", Quantity_1000);
    if (InsuffientTips == 1)
    {
      dialogHandle_5.SetOutput(Translate("There are not enough tips to complete this run:  \n"), Text_Insufficient50s, Text_Insufficient300s, Text_Insufficient1000s, Translate("\n\nIf carriers are not full, please fill the carriers with more tips."));
      dialogHandle_5.ShowOutput(Translate("Insufficient Number of Tips"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
      if (Quantity_50 < 959)
      {
        TipCount::Edit2(seq_Tips50, Translate("TruSeq_50F_Counter"), ML_STAR, 999);
      }
      if (Quantity_300 < 959)
      {
        TipCount::Edit2(seq_Tips300, Translate("TruSeq_SVF_Counter"), ML_STAR, 999);
      }
      if (Quantity_1000 < 119)
      {
        TipCount::Edit2(seq_Tips1000, Translate("TruSeq_HVF_Counter"), ML_STAR, 999);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  TipCounterRead <<<<<<<<<<"));
  }

  function TipCounterWrite( device & ML_STAR, sequence & seq_Tips50, sequence & seq_Tips300, sequence & seq_Tips1000 ) void {
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  TipCounterWrite<<<<<<<<<<"));
    TipCount::Write2(seq_Tips50, Translate("ILMN_50F_Counter"), ML_STAR);
    TipCount::Write2(seq_Tips300, Translate("ILMN_SVF_Counter"), ML_STAR);
    TipCount::Write2(seq_Tips1000, Translate("ILMN_HVF_Counter"), ML_STAR);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  TipCounterWrite <<<<<<<<<<"));
  }

  function ReadSampleSheet( variable & var_SourceFile, variable & var_NumberOfSamples, variable & var_IndexesUsed, variable & arr_Index1SeqPositions[], variable & arr_Index2SeqPositions[], variable & arr_ALPseqPositions[] ) void {
    private variable Column1data;
    private variable result_StringFound;
    private variable LoopCounter1;
    private variable result_Replacement;
    private file file1;
    private variable Line_WellDataHeader;
    private variable Index2_ID;
    private variable Index1_ID;
    private variable WellID;
    private file file2;
    private variable Index2_Position;
    private variable Index1_Position;
    private variable Return_Found0;
    private variable WellID_Row;
    private variable WellID_Column;
    var_NumberOfSamples = 0;
    var_IndexesUsed = 0;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  ReadSampleSheet <<<<<<<<<<"));
    file1.AddField("F1", Column1data, hslString, 255);
    file1.SetDelimiter(hslTabDelimited);
    if( 0 == file1.Open(var_SourceFile, hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_SourceFile, "HxMetEdCompCmd");
    }
    file2.AddField(1, Column1data, hslString, 255);
    file2.SetDelimiter(hslCSVDelimited);
    if( 0 == file2.Open("C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\TempSampleSheet.txt", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\TempSampleSheet.txt", "HxMetEdCompCmd");
    }
    file1.Seek(1, hslCurrent);
    MECC::TraceComment(Translate("Read and trace out the data from the Sample Sheet:"));
    {
      LoopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        LoopCounter1 = LoopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Trace (Column1data);
        result_StringFound = StrFind(Column1data, Translate("Sample_Well"));
        if (result_StringFound != -1)
        {
          MECC::TraceComment(Translate("Found the line with the headers for the well data...."));
          Line_WellDataHeader = LoopCounter1;
          MECC::TraceComment(Translate("Header row found.  Determine how many, if any, indexes will be used in this run."));
          result_Replacement = StrReplace(Column1data, Translate("Index_ID"), Translate(""));
          Trace ("***** (Found ", result_Replacement, " Index ID(s).)");
          var_IndexesUsed = result_Replacement;
        }
        if (Line_WellDataHeader > 0)
        {
          if( 0 == file2.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
    RemoveTextDelimitersFromAsciiTextFile(Translate("C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\TempSampleSheet.txt"));
    FilDeleteFileEx(Translate("C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\schema.ini"));
    MECC::TraceComment(Translate("Reread the file to get the number of samples and any index data."));
    if (var_IndexesUsed == 0)
    {
      MECC::TraceComment(Translate("***** No \"Index_ID\" found.  Adapter Indexes will not be used in this run."));
      file2.AddField("Sample_Well", WellID, hslString, 255);
      file2.SetDelimiter(hslCSVDelimited);
      if( 0 == file2.Open("C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\TempSampleSheet.txt", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\TempSampleSheet.txt", "HxMetEdCompCmd");
      }
    }
    if (var_IndexesUsed == 1)
    {
      MECC::TraceComment(Translate("***** One Index Found *****"));
      file2.AddField("Sample_Well", WellID, hslString, 255);
      file2.AddField("I7_", Index1_ID, hslString, 255);
      file2.SetDelimiter(hslCSVDelimited);
      if( 0 == file2.Open("C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\TempSampleSheet.txt", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\TempSampleSheet.txt", "HxMetEdCompCmd");
      }
    }
    if (var_IndexesUsed == 2)
    {
      MECC::TraceComment(Translate("***** Two Indexes Found *****"));
      file2.AddField("Sample_Well", WellID, hslString, 255);
      file2.AddField("I7_", Index1_ID, hslString, 255);
      file2.AddField("I5_", Index2_ID, hslString, 255);
      file2.SetDelimiter(hslCSVDelimited);
      if( 0 == file2.Open("C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\TempSampleSheet.txt", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\TempSampleSheet.txt", "HxMetEdCompCmd");
      }
    }
    arr_Index1SeqPositions.SetSize(0);
    arr_Index2SeqPositions.SetSize(0);
    arr_ALPseqPositions.SetSize(0);
    {
      var_NumberOfSamples = 0;
      while (
         (file2.Eof() == 0)
      )
      {
        var_NumberOfSamples = var_NumberOfSamples + 1;
        if( 0 == file2.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Return_Found0 = StrFind(WellID, Translate("0"));
        if (Return_Found0 != -1)
        {
          WellID_Row = StrLeft(WellID, 1);
          WellID_Column = StrRight(WellID, 2);
          WellID_Column = StrIVal(WellID_Column);
          WellID = StrConcat2(WellID_Row, WellID_Column);
        }
        arr_ALPseqPositions.AddAsLast(WellID);
        if (var_IndexesUsed >= 1)
        {
          Index1_Position = StrRight(Index1_ID, 2);
          Index1_Position = StrTrimLeft(Index1_Position, Translate("0"));
          arr_Index1SeqPositions.AddAsLast(Index1_Position);
        }
        if (var_IndexesUsed >= 2)
        {
          Index2_Position = StrRight(Index2_ID, 2);
          Index2_Position = StrTrimLeft(Index2_Position, Translate("0"));
          arr_Index2SeqPositions.AddAsLast(Index2_Position);
        }
        Trace ("Well:  ", WellID, "  Index1 Position in carrier:  ", Index1_Position, "  Index2 Position in carrier:  ", Index2_Position);
      }
    }
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  ReadSampleSheet <<<<<<<<<<"));
  }

  function GetHHSTemperature( variable var_HHS ) void {
    private variable ActualTemperatureNow;
    MECC::TraceComment(Translate(">>>>> Submethod:  GetHHSTemperature <<<<<"));
    HSLHamHeaterShaker::GetTemperature(var_HHS, ActualTemperatureNow);
    Trace ("***** The current temperature for HHS", var_HHS, " is ", ActualTemperatureNow, "C *****");
    MECC::TraceComment(Translate(">>>>> Submethod Complete:  GetHHSTemperature <<<<<"));
  }

  function ReadSamplePlateFile( variable & var_SourceFile, variable & var_NumberOfSamples, variable & var_IndexesUsed, variable & arr_Index1SeqPositions[], variable & arr_Index2SeqPositions[], variable & arr_ALPseqPositions[] ) void {
    private variable Index2_ID;
    private variable Index2_Position;
    private variable Index1_ID;
    private variable Column1data;
    private variable WellID_Row;
    private variable WellID;
    private variable LoopCounter1;
    private variable WellID_Column;
    private variable Index1_Position;
    private file file1;
    private file file2;
    private variable Column2data;
    private variable Column3data;
    private variable Column4data;
    private variable TheSQLStatement;
    private variable loopCounter1;
    private file file3;
    private variable Column5_Row;
    private variable Column3_Index1;
    private variable Column6_Column;
    private variable Column6_Column_string;
    private variable Column1_Well;
    private variable Column2_ID;
    private variable Column4_Index2;
    var_NumberOfSamples = 0;
    var_IndexesUsed = 0;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  ReadSamplePlateFile <<<<<<<<<<"));
    FilDeleteFileEx(Translate("C:\\Illumina\\Files\\TempSamplePlateFile.xls"));
    FilDeleteFileEx(Translate("C:\\Illumina\\Files\\TempSamplePlateFile2.xls"));
    MECC::TraceComment(Translate("Write the original data to an xls file and find the number of indexes used."));
    file1.AddField(1, Column1data, hslString, 255);
    file1.AddField(2, Column2data, hslString, 255);
    file1.AddField(3, Column3data, hslString, 255);
    file1.AddField(4, Column4data, hslString, 255);
    file1.SetDelimiter(hslTabDelimited);
    if( 0 == file1.Open(var_SourceFile, hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_SourceFile, "HxMetEdCompCmd");
    }
    file2.AddField("Well", Column1data, hslString, 255);
    file2.AddField("SampleID", Column2data, hslString, 255);
    file2.AddField("Index1", Column3data, hslString, 255);
    file2.AddField("Index2", Column4data, hslString, 255);
    if( 0 == file2.Open("C:\\Illumina\\Files\\TempSamplePlateFile.xls" + " " + "Sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Illumina\\Files\\TempSamplePlateFile.xls", "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == file2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (Column1data == "IndexReads")
        {
          MECC::TraceComment(Translate("Found the number of indexes"));
          var_IndexesUsed = Column2data;
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
    TheSQLStatement = StrConcat4(Translate("SELECT * FROM ["), Translate("Sheet1$"), Translate("] WHERE [SampleID] IS NOT NULL"), Translate(""));
    file2.SetExtendedProperties( "IMEX=1");
    file2.AddField("Well", Column1_Well, hslString, 255);
    file2.AddField("SampleID", Column2_ID, hslString, 255);
    file2.AddField("Index1", Column3_Index1, hslString, 255);
    file2.AddField("Index2", Column4_Index2, hslString, 255);
    if( 0 == file2.Open("C:\\Illumina\\Files\\TempSamplePlateFile.xls" + " " + "Sheet1$", hslRead, TheSQLStatement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Illumina\\Files\\TempSamplePlateFile.xls", "HxMetEdCompCmd");
    }
    file2.Seek(5, hslCurrent);
    file3.AddField("Well", Column1_Well, hslString, 255);
    file3.AddField("SampleID", Column2_ID, hslString, 255);
    file3.AddField("Index1", Column3_Index1, hslString, 255);
    file3.AddField("Index2", Column4_Index2, hslString, 255);
    file3.AddField("Row", Column5_Row, hslString, 255);
    file3.AddField("Column", Column6_Column, hslInteger);
    if( 0 == file3.Open("C:\\Illumina\\Files\\TempSamplePlateFile2.xls" + " " + "Sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Illumina\\Files\\TempSamplePlateFile2.xls", "HxMetEdCompCmd");
    }
    {
      LoopCounter1 = 0;
      while (
         (file2.Eof() == 0)
      )
      {
        LoopCounter1 = LoopCounter1 + 1;
        if( 0 == file2.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Column5_Row = StrLeft(Column1_Well, 1);
        Column6_Column_string = StrRight(Column1_Well, 2);
        Column6_Column = StrIVal(Column6_Column_string);
        if( 0 == file3.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
    if( 0 != file3.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file3.RemoveFields();
    file3.AddField("Well", WellID, hslString, 255);
    file3.AddField("SampleID", Column2_ID, hslString, 255);
    file3.AddField("Index1", Index1_ID, hslString, 255);
    file3.AddField("Index2", Index2_ID, hslString, 255);
    file3.AddField("Row", WellID_Row, hslString, 255);
    file3.AddField("Column", WellID_Column, hslInteger);
    if( 0 == file3.Open("C:\\Illumina\\Files\\TempSamplePlateFile2.xls" + " " + "Sheet1$", hslRead, "SELECT * FROM [Sheet1$] ORDER BY [Column] ASC, [Row] ASC") )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Illumina\\Files\\TempSamplePlateFile2.xls", "HxMetEdCompCmd");
    }
    arr_Index1SeqPositions.SetSize(0);
    arr_Index2SeqPositions.SetSize(0);
    arr_ALPseqPositions.SetSize(0);
    var_IndexesUsed = StrIVal(var_IndexesUsed);
    {
      var_NumberOfSamples = 0;
      while (
         (file3.Eof() == 0)
      )
      {
        var_NumberOfSamples = var_NumberOfSamples + 1;
        if( 0 == file3.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        WellID = StrConcat2(WellID_Row, WellID_Column);
        arr_ALPseqPositions.AddAsLast(WellID);
        if (var_IndexesUsed >= 1)
        {
          Index1_Position = StrRight(Index1_ID, 2);
          Index1_Position = StrTrimLeft(Index1_Position, Translate("0"));
          arr_Index1SeqPositions.AddAsLast(Index1_Position);
        }
        if (var_IndexesUsed >= 2)
        {
          Index2_Position = StrRight(Index2_ID, 2);
          Index2_Position = StrTrimLeft(Index2_Position, Translate("0"));
          arr_Index2SeqPositions.AddAsLast(Index2_Position);
        }
        Trace ("Well:  ", WellID, " ----- Index1 ID:  ", Index1_ID, " ----- Index2 ID:  ", Index2_ID);
      }
    }
    if( 0 != file3.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file3.RemoveFields();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  ReadSamplePlateFile <<<<<<<<<<"));
  }

  private function _Version(  ) void {
  }

  function InitHHSs_StarDevice( device & ML_STAR, variable & var_HHSDeviceNo1, variable & var_HHSDeviceNo2, variable var_SimulationMode ) void {
    private variable ret_HHS1;
    private variable ret_HHS2;
    private variable ret_HHS;
    private dialog dialogHandle_6;
    private dialog dialogHandle_7;
    var_HHSDeviceNo1 = 0;
    var_HHSDeviceNo2 = 0;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  InitHHSs_StarDevice <<<<<<<<<<"));
    HSLHamHeaterShaker::SetSimulation(var_SimulationMode);
    ret_HHS = 0;
    ret_HHS1 = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, var_HHSDeviceNo1);
    ret_HHS2 = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 2, var_HHSDeviceNo2);
    if (ret_HHS1 != 0)
    {
      Trace ("Error on HHS1:  ", ret_HHS1);
    }
    if (ret_HHS2 != 0)
    {
      Trace ("Error on HHS2:  ", ret_HHS2);
    }
    ret_HHS = ret_HHS1 + ret_HHS2;
    if (ret_HHS > 0)
    {
      MECC::TraceComment(Translate("\n\nHHS Error codes:\n1 - Fatal Error\n2 - Node not Initialized\n3 - Device not connected\n4 - CAN error\n5 - EEProm error\n6 - Unknown command\n7 - Unknown parameter\n8 - Parameter out of range\n9 - Voltage error\n10 - Stop \n11 - Wrong address\n13 - Shaker init failed\n14 - Shaker not initialized\n15 - Shaker step loss\n17 - Plate lock init failure\n18 - Plate lock step loss\n26 - Unknown firmware error\n\n"));
      dialogHandle_6.SetOutput(Translate("There is a problem with one or more Hamilton Heater Shakers."), Translate("\n\nPlease check the following and then restart the method:"), Translate("\n\n     Verify STAR is turned on."), Translate("\n     Verify the HHS cables are connected to the STAR."));
      dialogHandle_6.ShowOutput(Translate("Problem with the HHS(s) - Method Will Abort"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      abort;
    }
    MECC::TraceComment(Translate("****** Set USB Trace to On (requires HHS library v4.4) *****"));
    HSLHamHeaterShaker::SetUSBTrace(1);
    MECC::TraceComment(Translate("****** Set all plate locks to open ****"));
    ret_HHS1 = HSLHamHeaterShaker::SetPlateLock(var_HHSDeviceNo1, 0);
    ret_HHS2 = HSLHamHeaterShaker::SetPlateLock(var_HHSDeviceNo2, 0);
    ret_HHS = ret_HHS1 + ret_HHS2;
    if (ret_HHS > 0)
    {
      MECC::TraceComment(Translate("\n\nHHS Error codes:\n1 - Fatal Error\n2 - Node not Initialized\n3 - Device not connected\n4 - CAN error\n5 - EEProm error\n6 - Unknown command\n7 - Unknown parameter\n8 - Parameter out of range\n9 - Voltage error\n10 - Stop \n11 - Wrong address\n13 - Shaker init failed\n14 - Shaker not initialized\n15 - Shaker step loss\n17 - Plate lock init failure\n18 - Plate lock step loss\n26 - Unknown firmware error\n\n"));
      dialogHandle_7.SetOutput(Translate("There is a problem with one or more Hamilton Heater Shakers."), Translate("\n\nPlease check the trace.  Method will abort."));
      dialogHandle_7.ShowOutput(Translate("Problem with the HHS(s) - Method Will Abort"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      abort;
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  InitHHSs_StarDevice <<<<<<<<<<"));
  }

  function CheckCPACTemperature( variable var_CPACTemp, variable var_SimOn ) void {
    private dialog dialogHandle_8;
    private variable ret_Error;
    private variable loopCounter1;
    private variable ret_ActualTemp;
    private variable answer_CPACcheck;
    private timer timer1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  CheckCPACTemperature <<<<<<<<<<"));
    HSLInhecoTECLib::GetActualDeviceTemperature(0, 1, 1, ret_ActualTemp, ret_Error);
    ReportErrorTextCPAC(ret_Error);
    if (var_SimOn == 0)
    {
      Trace ("Expected max CPAC temperature:  ", var_CPACTemp);
      Trace ("Current CPAC temperature:  ", ret_ActualTemp);
      {
        loopCounter1 = 0;
        while (ret_ActualTemp > var_CPACTemp)
        {
          loopCounter1 = loopCounter1 + 1;
          if( 0 == timer1.SetTimer(10) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          HSLInhecoTECLib::GetActualDeviceTemperature(0, 1, 1, ret_ActualTemp, ret_Error);
          ReportErrorTextCPAC(ret_Error);
          Trace ("Current CPAC temperature:  ", ret_ActualTemp);
          if (loopCounter1 > 60)
          {
            dialogHandle_8.SetOutput(Translate("It is taking a long time for the CPAC to reach temperature.  \n\nClick Abort to end the method, Retry to keep trying to get to temperature, or Ignore to go the next process step."));
            answer_CPACcheck = dialogHandle_8.ShowOutput("", hslAbortRetryIgnore | hslInformation | hslDefButton1, hslInfinite);
          }
          if (answer_CPACcheck == 3)
          {
            abort;
          }
          if (answer_CPACcheck == 5)
          {
            break;
          }
        }
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  CheckCPACTemperature <<<<<<<<<<"));
  }

  function SetCPACTemperature( variable var_CPACTemp ) void {
    private variable ret_Error;
    private variable ret_ActualTemp;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  SetCPACTemperature <<<<<<<<<<"));
    HSLInhecoTECLib::GetActualDeviceTemperature(0, 1, 1, ret_ActualTemp, ret_Error);
    Trace ("Current CPAC Temperature:  ", ret_ActualTemp);
    ReportErrorTextCPAC(ret_Error);
    var_CPACTemp = var_CPACTemp / (1.0 * 1.0);
    HSLInhecoTECLib::SetTargetTemperature(0, 1, var_CPACTemp, ret_Error);
    ReportErrorTextCPAC(ret_Error);
    Trace ("CPAC Temperature set to:  ", var_CPACTemp);
    HSLInhecoTECLib::StartTemperatureControl(0, 1, ret_Error);
    ReportErrorTextCPAC(ret_Error);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  SetCPACTemperature <<<<<<<<<<"));
  }

  function GenerateTipCarrierBarcodeStrings( device & ML_STAR, sequence & seq_Tips50, sequence & seq_Tips300, sequence & seq_Tips1000, variable & var_50TipLoadString_2, variable & var_50TipLoadString_1, variable & var_300TipLoadString_2, variable & var_300TipLoadString_1, variable & var_1000TipLoadString ) void {
    private variable size_300Tip;
    private variable size_50Tip;
    private variable size_1000Tip;
    private variable currentLabwareID_50;
    private variable currentLabwareID_1000;
    private variable TipRackString;
    private variable ret_NumberOfReplacedInstances;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable currentLabwareID_300;
    private variable TipRackNumber;
    private variable arr_300TipLabwareIDs[];
    private variable arr_50TipLabwareIDs[];
    private variable arr_1000TipLabwareIDs[];
    var_50TipLoadString_2 = 0;
    var_50TipLoadString_1 = 0;
    var_300TipLoadString_2 = 0;
    var_300TipLoadString_1 = 0;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod: GenerateCarrierBarcodeStrings <<<<<<<<<<"));
    arr_50TipLabwareIDs.SetSize(0);
    arr_300TipLabwareIDs.SetSize(0);
    arr_1000TipLabwareIDs.SetSize(0);
    var_50TipLoadString_2 = Translate("");
    var_50TipLoadString_1 = Translate("");
    var_300TipLoadString_2 = Translate("");
    var_300TipLoadString_1 = Translate("");
    SeqGetLabwareIds(seq_Tips50, arr_50TipLabwareIDs);
    size_50Tip=arr_50TipLabwareIDs.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < size_50Tip;)
      {
        loopCounter1 = loopCounter1 + 1;
        currentLabwareID_50=arr_50TipLabwareIDs.GetAt(loopCounter1-1);
        TipRackString = StrRight(currentLabwareID_50, 1);
        TipRackNumber = StrIVal(TipRackString);
        if (TipRackNumber != 0)
        {
          if (TipRackNumber <= 5)
          {
            TipRackString = StrRight(currentLabwareID_50, 1);
            TipRackString = StrConcat2(TipRackString, Translate(","));
            var_50TipLoadString_1 = var_50TipLoadString_1 + TipRackString;
          }
          else
          {
            TipRackNumber = TipRackNumber - 5;
            TipRackString = StrIStr(TipRackNumber);
            TipRackString = StrConcat2(TipRackString, Translate(","));
            var_50TipLoadString_2 = var_50TipLoadString_2 + TipRackString;
          }
        }
        else
        {
          TipRackNumber = TipRackNumber + 5;
          TipRackString = StrIStr(TipRackNumber);
          TipRackString = StrConcat2(TipRackString, Translate(","));
          var_50TipLoadString_2 = var_50TipLoadString_2 + TipRackString;
        }
      }
    }
    SeqGetLabwareIds(seq_Tips300, arr_300TipLabwareIDs);
    size_300Tip=arr_300TipLabwareIDs.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < size_300Tip;)
      {
        loopCounter2 = loopCounter2 + 1;
        currentLabwareID_300=arr_300TipLabwareIDs.GetAt(loopCounter2-1);
        TipRackString = StrRight(currentLabwareID_300, 1);
        TipRackNumber = StrIVal(TipRackString);
        if (TipRackNumber != 0)
        {
          if (TipRackNumber <= 5)
          {
            TipRackString = StrRight(currentLabwareID_300, 1);
            TipRackString = StrConcat2(TipRackString, Translate(","));
            var_300TipLoadString_1 = var_300TipLoadString_1 + TipRackString;
          }
          else
          {
            TipRackNumber = TipRackNumber - 5;
            TipRackString = StrIStr(TipRackNumber);
            TipRackString = StrConcat2(TipRackString, Translate(","));
            var_300TipLoadString_2 = var_300TipLoadString_2 + TipRackString;
          }
        }
        else
        {
          TipRackNumber = TipRackNumber + 5;
          TipRackString = StrIStr(TipRackNumber);
          TipRackString = StrConcat2(TipRackString, Translate(","));
          var_300TipLoadString_2 = var_300TipLoadString_2 + TipRackString;
        }
      }
    }
    SeqGetLabwareIds(seq_Tips1000, arr_1000TipLabwareIDs);
    ret_NumberOfReplacedInstances = StrReplace(var_1000TipLoadString, Translate("TIP1,TIP2,"), Translate(""));
    size_1000Tip=arr_1000TipLabwareIDs.GetSize();
    if (size_1000Tip == 0)
    {
    }
    else
    {
      if (size_1000Tip == 1)
      {
        currentLabwareID_1000=arr_1000TipLabwareIDs.GetAt(1-1);
        TipRackString = StrRight(currentLabwareID_1000, 1);
        TipRackNumber = StrIVal(TipRackString);
        if (TipRackNumber == 1)
        {
          var_1000TipLoadString = StrConcat2(Translate("TIP1,"), var_1000TipLoadString);
        }
        else
        {
          var_1000TipLoadString = StrConcat2(Translate("TIP2,"), var_1000TipLoadString);
        }
      }
      else
      {
        var_1000TipLoadString = StrConcat2(Translate("TIP1,TIP2,"), var_1000TipLoadString);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: GenerateTipCarrierBarcodeStrings <<<<<<<<<<"));
  }
} // library namespace
