 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Illumina\\TruSeqRNAExome\\Library\\TruSeqPrep.hs_" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "SMTs\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Illumina\\TruSeqRNAExome\\Library\\TruSeqProcesses.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Illumina\\TruSeqRNAExome\\Library\\TruSeqPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Illumina\\TruSeqRNAExome\\Library\\NexteraProcesses.hs_" }
 namespace _Method { #include "ASWStandardDialogs\\AswStatusDialog.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Array.hsl" }
 namespace _Method { #include "HSLAppsLib.hsl" }
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Illumina\\TruSeqRNAExome\\Methods\\TruSeq RNA Access v1.1.3.res"
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Illumina\\TruSeqRNAExome\\Library\\TruSeqExomePrep.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
dialog customDialog_1;
variable AnswerStopPoint;
variable AnswerStartPoint;
dialog dialogHandle3;
variable AnswerAdapterLabware;
variable RunProcess4;
variable RunProcess1;
variable RunProcess2;
variable RunProcess3;
variable File_SampleSheet;
variable NumberOfSamples;
variable HHS1;
variable HHS2;
variable HHS3;
variable VolumeAmpureBeadsForCleanupPCR;
variable TimerWasStopped;
variable SetTempCPAC;
variable SetTempHHS1;
variable SetTempHHS2;
variable SetTempHHS3;
variable PlatesInStack1;
variable PlatesInStack2;
variable PlatesInStack3;
variable PlatesInStack4;
variable ResultOfPlateCheck_msg;
variable ResultOfPlateCheck_flag;
variable PlateCarBCsToCheck;
variable SimOn;
variable ExtraTips300;
variable TipsPerSample_50;
variable TipsPerSample_300;
variable Number1000Tips;
variable Number50Tips;
variable Number300Tips;
variable AnswerPooling;
variable NumberOfIndexes;
variable array_ALPPositions[];
variable array_Index1Positions[];
variable array_Index2Positions[];
file file1;
variable PlateCarBCsToCheck_PCR;
variable StartingTipPosition_1000;
variable StartingTipPosition_300;
variable StartingTipPosition_50;
dialog dialogHandle_2;
dialog dialogHandle_3;
variable HHS4;
variable HHS5;
variable SetTempHHS4;
variable SetTempHHS5;
variable AnswerSampleQuality;
variable PerformFragmentation;
dialog dialogHandle_4;
variable VialCarBCsToCheck_Rgts;
variable AdapterBCsToRead;
variable TrackingEthanolVolume_80;
variable ButtonClick_RunSettings;
variable RunProcess5;
variable RunProcess6;
variable RunProcess7;
variable RunProcess8;
variable RunProcess9;
variable RunProcess_10;
variable AnswerFFPE;
variable Samples_NonFFPE;
variable Samples_FFPE;
variable Total_Samples_Check;
dialog dialogHandle_5;
dialog dialogHandle_6;
dialog dialogHandle_7;
variable TipCounterSet_Flag;
variable NumberOfPools;
variable GripperMode;
sequence GripperSequence;
dialog dialogHandle_8;
variable NumberOfFFPEplusNon;
dialog dialogHandle_9;
variable EmailNotifyFlag;
global device ML_STAR ("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Illumina\\TruSeqRNAExome\\Methods\\TruSeq RNA Access v1.1.3.lay", "ML_STAR", hslTrue);
dialog dialogHandle_10;
variable var_NumPooledWells;
variable arr_SourceWell[];
variable arr_BufferVol[];
variable arr_SampleVol[];
variable var_Pool_ZeroFlag;
variable var_NumSamplesToPool;
variable var_Pool_TotalBufferVol;
sequence seq_dummy;
variable TrackToScanBarcode;
variable TrackToParkAL;
dialog dialogHandle_11;
dialog dialogHandle_12;
variable loopCounter_CheckResources;
variable ret_UserAbort;
dialog dialogHandle1;
dialog dialogHandle_13;
variable TipCarBCsToCheck_300_1;
variable TipCarBCsToCheck_300_2;
variable TipCarBCsToCheck_50_1;
variable TipCarBCsToCheck_50_2;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TRUSEQPREP::_InitLibrary();
    TIP_PRESENT_CHECK_5ML_1ML::_InitLibrary();
    TRUSEQPROCESSES::_InitLibrary();
    NEXTERAPROCESSES::_InitLibrary();
    TRUSEQEXOMEPREP::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    AswStatusDialog::Initialize(Translate("TruSeq RNA Access"));
    AswStatusDialog::SetStatusText(Translate("Run Preparation..."));
    MECC::TraceComment(Translate("***** Set type of gripper:  1=iSWAP, 2=COREGrippers ******"));
    GripperMode = 2;
    Trace ("***** Grippermode:  ", GripperMode);
    if (GripperMode == 2)
    {
      SeqCopySequence(seq_dummy, ML_STAR.COREGripTool_OnWaste_1000ul_0001);
    }
    else
    {
    }
    SeqOperatorAssignSeq(GripperSequence, seq_dummy);
    if (GripperMode == 1)
    {
      TrackToScanBarcode = 54;
    }
    else
    {
      TrackToScanBarcode = 5;
    }
    TrackToParkAL = 54;
    MECC::TraceComment(Translate("***** Set email notification on/off for reload steps: 0 = off, 1 = on ******"));
    EmailNotifyFlag = 0;
    Trace ("***** EmailNotifyFlag:  ", EmailNotifyFlag);
    AswStatusDialog::AppendText(Translate("   User selections..."));
    file1.AddField("AnswerStartPoint", AnswerStartPoint, hslInteger);
    file1.AddField("AnswerStopPoint", AnswerStopPoint, hslInteger);
    file1.AddField("File_SampleSheet", File_SampleSheet, hslString, 255);
    file1.AddField("AnswerAdapterLabware", AnswerAdapterLabware, hslInteger);
    file1.AddField("AnswerSampleQuality", AnswerSampleQuality, hslInteger);
    file1.AddField("AnswerPooling", AnswerPooling, hslInteger);
    file1.AddField("FFPE", AnswerFFPE, hslInteger);
    file1.AddField("Samples_NonFFPE", Samples_NonFFPE, hslInteger);
    file1.AddField("Samples_FFPE", Samples_FFPE, hslInteger);
    file1.SetDelimiter(";");
    if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Illumina\\TruSeqRNAExome\\Files\\CustomDialogDefaults_TruSeqExome.txt", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Illumina\\TruSeqRNAExome\\Files\\CustomDialogDefaults_TruSeqExome.txt", "HxMetEdCompCmd");
    }
    if( 0 == file1.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "comboBox1.SelectedIndex", AnswerStartPoint );
    customDialog_1.SetCustomDialogProperty( "comboBox2.SelectedIndex", AnswerStopPoint );
    customDialog_1.SetCustomDialogProperty( "path1.Path", File_SampleSheet );
    customDialog_1.SetCustomDialogProperty( "comboBox4.SelectedIndex", AnswerAdapterLabware );
    customDialog_1.SetCustomDialogProperty( "numeric1.Value", Samples_FFPE );
    customDialog_1.SetCustomDialogProperty( "numeric2.Value", Samples_NonFFPE );
    customDialog_1.SetCustomDialogProperty( "numeric3.Value", AnswerPooling );
    customDialog_1.ShowCustomDialog();
    ButtonClick_RunSettings = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    AnswerStartPoint = customDialog_1.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
    AnswerStopPoint = customDialog_1.GetCustomDialogProperty( "comboBox2.SelectedIndex" );
    File_SampleSheet = customDialog_1.GetCustomDialogProperty( "path1.Path" );
    AnswerAdapterLabware = customDialog_1.GetCustomDialogProperty( "comboBox4.SelectedIndex" );
    Samples_FFPE = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
    Samples_NonFFPE = customDialog_1.GetCustomDialogProperty( "numeric2.Value" );
    AnswerPooling = customDialog_1.GetCustomDialogProperty( "numeric3.Value" );
    if (ButtonClick_RunSettings == 3)
    {
      abort;
    }
    if (Samples_FFPE > 0)
    {
      AnswerFFPE = 1;
      if (Samples_NonFFPE > 0)
      {
        AnswerFFPE = 3;
      }
    }
    else
    {
      AnswerFFPE = 2;
    }
    Trace ("Starting point index:  ", AnswerStartPoint);
    Trace ("Stopping point index:  ", AnswerStopPoint);
    Trace ("Sample plate file:  ", File_SampleSheet);
    Trace ("Sample Quality? (1=High, 2=Medium, 3=Low, 4=not applicable):  ", AnswerSampleQuality);
    Trace ("Adapter Labware (1=RAP, 2=vials, 0=not applicable):  ", AnswerAdapterLabware);
    Trace ("Pooling? (>0=yes, 0=no, # = # of pooled sample wells to process):  ", AnswerPooling);
    Trace ("FFPE samples? (1=yes, 2=no, 3=mixed):  ", AnswerFFPE);
    if (AnswerStopPoint < AnswerStartPoint)
    {
      dialogHandle3.SetOutput(Translate("The selection for Stopping Point occurs before the selection for Starting Point.  Method will now abort."));
      dialogHandle3.ShowOutput(Translate("Selections Incorrect"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      abort;
    }
    file1.AddField("AnswerStartPoint", AnswerStartPoint, hslInteger);
    file1.AddField("AnswerStopPoint", AnswerStopPoint, hslInteger);
    file1.AddField("File_SampleSheet", File_SampleSheet, hslString, 255);
    file1.AddField("AnswerAdapterLabware", AnswerAdapterLabware, hslInteger);
    file1.AddField("AnswerSampleQuality", AnswerSampleQuality, hslInteger);
    file1.AddField("AnswerPooling", AnswerPooling, hslInteger);
    file1.AddField("FFPE", AnswerFFPE, hslInteger);
    file1.AddField("Samples_NonFFPE", Samples_NonFFPE, hslInteger);
    file1.AddField("Samples_FFPE", Samples_FFPE, hslInteger);
    file1.SetDelimiter(";");
    if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Illumina\\TruSeqRNAExome\\Files\\CustomDialogDefaults_TruSeqExome.txt", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Illumina\\TruSeqRNAExome\\Files\\CustomDialogDefaults_TruSeqExome.txt", "HxMetEdCompCmd");
    }
    if( 0 == file1.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    NumberOfSamples = Samples_FFPE + Samples_NonFFPE;
    Trace ("***** Number of FFPE Samples:  ", Samples_FFPE);
    Trace ("***** Number of Non-FFPE Samples:  ", Samples_NonFFPE);
    Trace ("***** Number of FFPE + Non-FFPE Samples:  ", NumberOfSamples);
    if (File_SampleSheet == "")
    {
      dialogHandle_4.SetInputSize(1);
      dialogHandle_4.SetInputField(0, Translate("Please browse for and select the Sample Plate File file (txt file)."), hslString, "C:\\Program Files (x86)\\HAMILTON\\NGSStar\Illumina\TruSeqRNAExome\\Methods\\ExampleSampleSheet.csv");
      dialogHandle_4.ShowInput(Translate("Sample Sheet File"), hslInfinite, hslOKOnly | hslDefButton1);
      File_SampleSheet = dialogHandle_4.GetInputField(0);
      Trace ("***** Sample Plate File:  ", File_SampleSheet);
    }
    array_Index1Positions.SetSize(0);
    array_Index2Positions.SetSize(0);
    array_ALPPositions.SetSize(0);
    if (AnswerStartPoint <= 3)
    {
      NumberOfFFPEplusNon = NumberOfSamples;
      TRUSEQPREP::ReadSamplePlateFile(File_SampleSheet, NumberOfSamples, NumberOfIndexes, array_Index1Positions, array_Index2Positions, array_ALPPositions);
      Trace ("***** Number of Samples from file:  ", NumberOfSamples);
      if (NumberOfSamples != NumberOfFFPEplusNon)
      {
        dialogHandle_8.SetOutput(Translate("The number of samples represented by the sample file ("), NumberOfSamples, Translate(") does not match the entered number of FFPE + non-FFPE samples ("), NumberOfFFPEplusNon, Translate(")..  Method will abort."));
        dialogHandle_8.ShowOutput("", hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
        abort;
      }
    }
    if (AnswerStartPoint == 1)
    {
      if (AnswerFFPE == 3)
      {
        Total_Samples_Check = Samples_FFPE + Samples_NonFFPE;
        if (Total_Samples_Check != NumberOfSamples)
        {
          dialogHandle_5.SetOutput(Translate("The total number of FFPE and non-FFPE does not match the number of samples in the Sample File."), Translate("\n\nMethod will abort."));
          dialogHandle_5.ShowOutput(Translate("Inconsistent number of samples"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          abort;
        }
        else
        {
          dialogHandle_7.SetOutput(Translate("Please prepare two sample plates (8.5ul each sample):"), Translate("\n\n1 - HSP with the non-FFPE samples - place on 3rd position from rear on plate-tip carrier"), Translate("\n2 - HSP with the FFPE samples - place on 4th position from rear on plate-tip carrier"), Translate("\n\nAfter fragmentation, the samples will be combined onto the FFPE plate."));
          dialogHandle_7.ShowOutput(Translate("Mixed Sample Types"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
      }
      else
      {
        dialogHandle_6.SetOutput(Translate("Starting samples (8.5ul) go on the fourth position (from rear) on the plate-tip carrier, in an HSP."));
        dialogHandle_6.ShowOutput(Translate("Sample Plate Position"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    if (AnswerFFPE != 1)
    {
      PerformFragmentation = 1;
    }
    if (AnswerStartPoint <= 3)
    {
      if (AnswerStopPoint >= 2)
      {
        if (AnswerAdapterLabware == 0)
        {
          if (AnswerStartPoint == 3)
          {
            dialogHandle_2.SetOutput(Translate("Did you use the RAP plate instead of adapters in vials for these samples?"));
            AnswerAdapterLabware = dialogHandle_2.ShowOutput(Translate("Adapter Labware"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
          }
          else
          {
            dialogHandle_3.SetOutput(Translate("Will you being using the RAP plate instead of adapters in vials?"));
            AnswerAdapterLabware = dialogHandle_3.ShowOutput(Translate("Adapter Labware"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
          }
          if (AnswerAdapterLabware == 6)
          {
            MECC::TraceComment(Translate("********** Using the RAP plate **********"));
            AnswerAdapterLabware = 1;
          }
          else
          {
            MECC::TraceComment(Translate("********** Using the Adapters in Vials **********"));
            AnswerAdapterLabware = 2;
          }
          Trace ("***** Adapters will be in (1=RAP, 2=Vials):  ", AnswerAdapterLabware);
        }
        if (AnswerAdapterLabware == 1)
        {
          if (NumberOfIndexes == 1)
          {
            dialogHandle1.SetOutput(Translate("The adapter labware selected in the Run Settings screen does not correspond with the number of adapters found in the sample plate file."), "\n", Translate(""), "\n", Translate("Please check the sample plate file and note the number of file columns listing different types of adapters.  Method will now abort."));
            dialogHandle1.ShowOutput(Translate("Selection Incorrect"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            abort;
          }
          VolumeAmpureBeadsForCleanupPCR = 47.5;
          PlateCarBCsToCheck = Translate("1,5");
        }
        else
        {
          if (NumberOfIndexes != 1)
          {
            dialogHandle_13.SetOutput(Translate("The adapter labware selected in the Run Settings screen does not correspond with the number of adapters found in the sample plate file."), "\n", Translate(""), "\n", Translate("Please check the sample plate file and note the number of file columns listing different types of adapters.  Method will now abort."));
            dialogHandle_13.ShowOutput(Translate("Selection Incorrect"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            abort;
          }
          VolumeAmpureBeadsForCleanupPCR = 50;
        }
      }
    }
    ML_STAR.HSP_HHS3.SetCount(NumberOfSamples);
    ML_STAR.HSP_Pipette.SetCount(NumberOfSamples);
    ML_STAR.HSP_CPAC.SetCount(NumberOfSamples);
    ML_STAR.MIDI_HHS3.SetCount(NumberOfSamples);
    ML_STAR.MIDI_Pipette.SetCount(NumberOfSamples);
    ML_STAR.MIDI_CPAC.SetCount(NumberOfSamples);
    ML_STAR.MIDI_OnMagnet.SetCount(NumberOfSamples);
    if (AnswerFFPE == 1)
    {
      ML_STAR.HSP_Pipette_FFPE.SetCount(NumberOfSamples);
      ML_STAR.HSP_NonFFPE.SetCount(0);
    }
    if (AnswerFFPE == 2)
    {
      ML_STAR.HSP_Pipette_FFPE.SetCount(NumberOfSamples);
      ML_STAR.HSP_NonFFPE.SetCount(0);
      ML_STAR.HSP_HHS3_NonFFPE.SetCount(NumberOfSamples);
    }
    if (AnswerFFPE == 3)
    {
      ML_STAR.HSP_Pipette_FFPE.SetCount(Samples_FFPE);
      ML_STAR.HSP_NonFFPE.SetCount(Samples_NonFFPE);
      ML_STAR.HSP_HHS3_NonFFPE.SetCount(Samples_NonFFPE);
    }
    if (AnswerStartPoint >= 4)
    {
      if (AnswerPooling == 0)
      {
        if (AnswerStartPoint >= 4)
        {
          if (NumberOfSamples > 24)
          {
            dialogHandle_9.SetOutput(Translate("The maximum # of sample wells that can be run for Processes 5-8 is 24"), "\n", Translate(""), "\n", Translate("You have selected "), NumberOfSamples, "\n", Translate(""), "\n", Translate("Aborting..."));
            dialogHandle_9.ShowOutput(Translate("Exceeded maximum #!!"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
            abort;
          }
        }
        NumberOfPools = NumberOfSamples;
      }
      else
      {
        NumberOfPools = AnswerPooling;
        NumberOfSamples = NumberOfPools;
      }
      ML_STAR.HSP_Pipette.SetCount(NumberOfPools);
      ML_STAR.HSP_Pipette2.SetCount(NumberOfPools);
      ML_STAR.HSP_HHS2.SetCount(NumberOfPools);
      ML_STAR.HSP_HHS3.SetCount(NumberOfPools);
      ML_STAR.MIDI_OnMagnet.SetCount(NumberOfPools);
      ML_STAR.MIDI_HHS3.SetCount(NumberOfPools);
      ML_STAR.MIDI_EnrichmentMixture1.SetCount(NumberOfPools);
      ML_STAR.MIDI_EnrichmentMixture2.SetCount(NumberOfPools);
    }
    Trace ("***** Number of Samples:  ", NumberOfSamples);
    AswStatusDialog::AppendText(Translate("   Resources required..."));
    CalculateResources();
    AswStatusDialog::AppendText(Translate("   Initializing ML STAR..."));
    MECC::TraceComment(Translate("********** Initialize Devices *********"));
    SimOn = Util::GetSimulationMode();
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    AswStatusDialog::AppendText(Translate("   Initializing Hamilton Heater Shakers (HHSs)..."));
    TRUSEQPREP::InitHHSs(HHS1, HHS2, HHS3, HHS4, HHS5, SimOn);
    if (AnswerStartPoint == 1)
    {
      SetTempHHS1 = 94;
      SetTempHHS2 = 42.5;
      SetTempHHS3 = 25;
      SetTempHHS4 = 80;
      SetTempHHS5 = 37;
      SetTempCPAC = 4;
    }
    if (AnswerStartPoint == 2)
    {
      SetTempHHS1 = 0;
      SetTempHHS2 = 0;
      SetTempHHS3 = 0;
      SetTempHHS4 = 80;
      SetTempHHS5 = 37;
      SetTempCPAC = 4;
    }
    if (AnswerStartPoint > 2)
    {
      SetTempHHS1 = 0;
      SetTempHHS2 = 0;
      SetTempHHS3 = 0;
      SetTempHHS4 = 0;
      SetTempHHS5 = 37;
      SetTempCPAC = 20;
    }
    if (AnswerStartPoint == 4)
    {
      SetTempHHS5 = 0;
    }
    if (RunProcess5 == 1)
    {
      SetTempHHS4 = 50;
    }
    if (RunProcess6 == 1)
    {
      SetTempHHS4 = 50;
    }
    Trace ("Setting Temperatures of Devices:");
    Trace ("HHS1 set temperature:  ", SetTempHHS1);
    Trace ("HHS2 set temperature:  ", SetTempHHS2);
    Trace ("HHS3 set temperature:  ", SetTempHHS3);
    Trace ("HHS4 set temperature:  ", SetTempHHS4);
    Trace ("HHS5 set temperature:  ", SetTempHHS5);
    Trace ("CPAC set temperature:  ", SetTempCPAC);
    TRUSEQPREP::SetHHSTemperature(HHS1, SetTempHHS1);
    TRUSEQPREP::SetHHSTemperature(HHS2, SetTempHHS2);
    TRUSEQPREP::SetHHSTemperature(HHS3, SetTempHHS3);
    TRUSEQPREP::SetHHSTemperature(HHS4, SetTempHHS4);
    TRUSEQPREP::SetHHSTemperature(HHS5, SetTempHHS5);
    if (SimOn == 0)
    {
      AswStatusDialog::AppendText(Translate("   Initializing CPAC chiller..."));
      TRUSEQPREP::InitCPAC(SimOn);
      TRUSEQPREP::SetCPACTemperature(SetTempCPAC);
      AswStatusDialog::AppendText(Translate("   Initializing Liquid Waste Sensor..."));
      TRUSEQPREP::InitLiquidWasteSensor();
    }
    AswStatusDialog::AppendText(Translate("   Tip Counters..."));
    TRUSEQPREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Number50Tips, Number300Tips, Number1000Tips);
    TRUSEQPREP::GenerateTipCarrierBarcodeStrings(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, TipCarBCsToCheck_50_2, TipCarBCsToCheck_50_1, TipCarBCsToCheck_300_2, TipCarBCsToCheck_300_1, PlateCarBCsToCheck_PCR);
    TipCounterSet_Flag = 1;
    StartingTipPosition_50 = ML_STAR.MlStar50ulTipWithFilter.GetCurrentPosition();
    StartingTipPosition_300 = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCurrentPosition();
    StartingTipPosition_1000 = ML_STAR.MlStar1000ulHighVolumeTipWithFilter.GetCurrentPosition();
    AswStatusDialog::AppendText(Translate("   Loading the deck..."));
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    if (TipCarBCsToCheck_50_2 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_50F_2:  ", TipCarBCsToCheck_50_2);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_50_1 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_50F_1:  ", TipCarBCsToCheck_50_1);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_300_2 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_STF_2:  ", TipCarBCsToCheck_300_2);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_300_1 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_STF_1:  ", TipCarBCsToCheck_300_1);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (AnswerStartPoint == 1)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (AnswerStartPoint <= 4)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    else
    {
      if (RunProcess6 == 1)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (RunProcess8 == 1)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
    }
    if (AnswerStartPoint < 8)
    {
      if (AnswerStopPoint != 4)
      {
        Trace ("Barcodes to check:  ", VialCarBCsToCheck_Rgts);
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
    }
    if (AnswerStartPoint <= 2)
    {
      if (AnswerStopPoint > 1)
      {
        if (AnswerAdapterLabware == 2)
        {
          Trace ("Barcodes to check:  ", AdapterBCsToRead);
          ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        }
      }
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    if (SimOn == 0)
    {
      if (GripperMode == 1)
      {
        AswStatusDialog::AppendText(Translate("   Checking plate inventory..."));
        TRUSEQPREP::CheckPlatesInStacks(ML_STAR, ML_STAR.Stack1, ML_STAR.Stack2, ML_STAR.Stack3, ML_STAR.Stack4, PlatesInStack1, PlatesInStack2, PlatesInStack3, PlatesInStack4, ResultOfPlateCheck_flag, ResultOfPlateCheck_msg);
        if (ResultOfPlateCheck_flag == 1)
        {
          {
            loopCounter_CheckResources = 0;
            while (ResultOfPlateCheck_flag == 1)
            {
              loopCounter_CheckResources = loopCounter_CheckResources + 1;
              dialogHandle_12.SetOutput(ResultOfPlateCheck_msg, Translate("\n\nThe stacker carrier will be unloaded."));
              dialogHandle_12.ShowOutput(Translate("Incorrect Number of Plates in Stacker Carrier"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
              ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
              dialogHandle_11.SetOutput(Translate("Add the appropriate number of plates to the correct stack and click 'Retry' to reattempt plate check."), Translate("\n\nClick 'Cancel' to abort the method."));
              ret_UserAbort = dialogHandle_11.ShowOutput(Translate("Reload appropriate stack"), hslRetryCancel | hslInformation | hslDefButton1, hslInfinite);
              if (ret_UserAbort == 2)
              {
                Trace ("User has requested the method abort...");
                ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                abort;
              }
              ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              if (GripperMode == 1)
              {
                TRUSEQPREP::CheckPlatesInStacks(ML_STAR, ML_STAR.Stack1, ML_STAR.Stack2, ML_STAR.Stack3, ML_STAR.Stack4, PlatesInStack1, PlatesInStack2, PlatesInStack3, PlatesInStack4, ResultOfPlateCheck_flag, ResultOfPlateCheck_msg);
              }
            }
          }
          ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        }
      }
    }
    if (RunProcess1 == 1)
    {
      Process1_FragmentSynth();
    }
    if (RunProcess2 == 1)
    {
      Process2_AdenylateLigate();
    }
    if (RunProcess3 == 1)
    {
      Process3_PCRAmplification();
    }
    if (RunProcess4 == 1)
    {
      Process4_NormalizePool();
    }
    if (RunProcess5 == 1)
    {
      Process5_HybCapture1();
    }
    if (RunProcess6 == 1)
    {
      Process6_HybCapture2PlusCleanup();
    }
    if (RunProcess7 == 1)
    {
      Process7_PCR2();
    }
    if (RunProcess8 == 1)
    {
      Process8_PCRCleanup2();
    }
    AswStatusDialog::SetStatusText(Translate("Unloading the deck..."));
    if (GripperMode == 1)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
    MECC::TraceComment(Translate("***** Unload Carriers *****"));
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    if (AnswerStopPoint > 4)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (AnswerStopPoint == 5)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (AnswerStopPoint == 6)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    if (AnswerStartPoint == 1)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (AnswerStartPoint == 4)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (AnswerStartPoint >= 5)
    {
      if (AnswerStopPoint <= 6)
      {
        if (NumberOfSamples > 18)
        {
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
      }
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    AswStatusDialog::SetStatusText(Translate("Preparing for run shutdown..."));
    TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    if (SimOn == 0)
    {
      TRUSEQPREP::SetHHSTemperature(HHS1, 0);
      TRUSEQPREP::SetHHSTemperature(HHS2, 0);
      TRUSEQPREP::SetHHSTemperature(HHS3, 0);
      TRUSEQPREP::SetHHSTemperature(HHS4, 0);
      TRUSEQPREP::SetHHSTemperature(HHS5, 0);
    }
    TRUSEQPREP::TerminateHHSs();
    TRUSEQPREP::TerminateCPAC();
    dialogHandle_10.SetOutput(Translate("Please empty the tip waste, and check/empty the liquid waste container."), Translate("\n\nConsider performing Daily/Weekly Maintenance at this time."));
    dialogHandle_10.ShowOutput(Translate("Method Complete"), hslOKOnly | hslInformation | hslDefButton1, 3600);
    AswStatusDialog::Terminate();
    TRUSEQPREP::_ExitLibrary();
    TIP_PRESENT_CHECK_5ML_1ML::_ExitLibrary();
    TRUSEQPROCESSES::_ExitLibrary();
    NEXTERAPROCESSES::_ExitLibrary();
    TRUSEQEXOMEPREP::_ExitLibrary();
  } }
