private function CalculateResources(  ) void ;
function Check_TipQty( sequence & seq_TipsToCheck, variable var_TipsRequired, variable var_TipType ) void ;
private function CleanUp( variable var_TransferFromHSPtoMIDI, variable var_VolumeSample, variable var_VolumeSupernatant, variable var_ResuspensionBuffer, sequence & seq_SampleSourcePosition, variable var_SamplePlateType, sequence & seq_PlateWastePosition ) void ;
private function CleanUp2( variable var_VolumeBeads, variable var_BeadIncubationTime, variable var_VolumeSupernatant, variable var_ResuspensionBuffer ) void ;
private function EmailNotify( variable To, variable Subject, variable Body ) void ;
private function NormalizePool_Calc( variable i_var_PoolWellID, variable & i_arr_Pool_SourceWell[], variable & i_arr_Pool_SampleVol[], variable & i_arr_Pool_Index[], variable & i_arr_Pool_SampleType[], variable & o_var_Pool_Count ) void ;
private function NormalizePool_Prep(  ) void ;
private function Process1_FragmentSynth(  ) void ;
private function Process2_AdenylateLigate(  ) void ;
private function Process3_PCRAmplification(  ) void ;
private function Process4_NormalizePool(  ) void ;
private function Process5_HybCapture1(  ) void ;
private function Process6_HybCapture2PlusCleanup(  ) void ;
private function Process7_PCR2(  ) void ;
private function Process8_PCRCleanup2(  ) void ;
private function WaitForAndCheckTimer( timer & IncubationTimer ) void ;
private function _VersionHistory(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private variable ResultTipCheck;
  private variable ChPatternAbort;
  MECC::TraceComment(Translate("*************************************************************************\n******************** METHOD HAS ABORTED ********************\n*************************************************************************\n"));
  AswStatusDialog::SetStatusText(Translate("Method is aborting..."));
  if (TipCounterSet_Flag == 1)
  {
    TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  }
  if (SimOn == 0)
  {
    TRUSEQPREP::SetHHSTemperature(HHS1, 0);
    TRUSEQPREP::SetHHSTemperature(HHS2, 0);
    TRUSEQPREP::SetHHSTemperature(HHS3, 0);
    TRUSEQPREP::SetHHSTemperature(HHS4, 0);
    TRUSEQPREP::SetHHSTemperature(HHS5, 0);
  }
  TRUSEQPREP::TerminateHHSs();
  TRUSEQPREP::TerminateCPAC();
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  ResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, ChPatternAbort, 8);
  if (ResultTipCheck == 1)
  {
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  AswStatusDialog::Terminate();
}

private function Process1_FragmentSynth(  ) void {
  private timer WaitForMagnet;
  private timer Incubate_DFP_42C;
  private timer Incubate_DFP_70C;
  private timer Incubate_DFP_25C;
  private timer Incubate_DFP_16C;
  private timer Incubate_DFP_94C;
  private timer Cooling_DFP;
  private dialog dialogHandle_1;
  private dialog dialogHandle_2;
  private dialog dialogHandle_3;
  private variable AnswerMoreTips;
  private variable StartPosition_FFPE;
  private variable loopCounter1;
  private sequence Dummy_NoControl;
  private dialog dialogHandle_4;
  private variable NumberOfTipsRequired;
  MECC::TraceComment(Translate("**********************************************************************************************************************************************\n******************** SUBMETHOD START:  PROCESS 1 - FRAGMENT AND SYNTHESIZE ********************\n**********************************************************************************************************************************************"));
  MECC::TraceComment(Translate("***** FRAGMENT *****"));
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(Translate("TruSeq RNA Access Library Preparation"));
  AswStatusDialog::SetStatusText(Translate("Process 1:  Fragment and Synthesize"));
  NumberOfTipsRequired = NumberOfSamples * 4;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  MECC::TraceComment(Translate("************* Now pipetting EPH (Elute, Prime, Fragment High Mix) .............."));
  AswStatusDialog::AppendText(Translate("   Pipetting EPH..."));
  if (Samples_FFPE > 0)
  {
    TRUSEQPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.Vial_EPH, ML_STAR.HSP_Pipette_FFPE, ML_STAR.MlStar50ulTipWithFilter, 8.5, Translate("TruSeq_50F_EPH_SurfaceEmpty"), 5);
    TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  }
  if (Samples_NonFFPE > 0)
  {
    if (Samples_FFPE == 0)
    {
      TRUSEQPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.Vial_EPH, ML_STAR.HSP_Pipette_FFPE, ML_STAR.MlStar50ulTipWithFilter, 8.5, Translate("TruSeq_50F_EPH_SurfaceEmpty"), 5);
      TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    }
    else
    {
      TRUSEQPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.Vial_EPH, ML_STAR.HSP_NonFFPE, ML_STAR.MlStar50ulTipWithFilter, 8.5, Translate("TruSeq_50F_EPH_SurfaceEmpty"), 5);
      TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    }
  }
  if (AnswerFFPE == 2)
  {
    MECC::TraceComment(Translate("************* Move non-FFPE plate to shaker .............."));
  }
  else
  {
    MECC::TraceComment(Translate("************* Move FFPE plate to shaker .............."));
  }
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_HHS3, 0, 0, GripperMode, GripperSequence);
  if (AnswerFFPE == 2)
  {
    MECC::TraceComment(Translate("************* Shake the non-FFPE plate.............."));
  }
  else
  {
    MECC::TraceComment(Translate("************* Shake the FFPE plate.............."));
  }
  TRUSEQPREP::Shake(HHS3, 1600, 20);
  if (AnswerFFPE == 3)
  {
    MECC::TraceComment(Translate("The batch has a a mixture of FFPE and non-FFPE samples.  "));
    MECC::TraceComment(Translate("************* Move FFPE plate back to carrier .............."));
    TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_Pipette, 0, 0, GripperMode, GripperSequence);
    MECC::TraceComment(Translate("************* Move non-FFPE plate to shaker .............."));
    TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_NonFFPE, ML_STAR.HSP_HHS3, 0, 1, GripperMode, GripperSequence);
    MECC::TraceComment(Translate("************* Shake the non-FFPE plate.............."));
    TRUSEQPREP::Shake(HHS3, 1600, 20);
  }
  if (Samples_FFPE > 0)
  {
    if (Samples_NonFFPE > 0)
    {
      AswStatusDialog::AppendText(Translate("   Add mineral oil to the FFPE samples..."));
      MECC::TraceComment(Translate("************* Now add mineral oil to FFPE samples .............."));
      TRUSEQPROCESSES::Add_Oil(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.HSP_Pipette_FFPE, ML_STAR._Oil);
      TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    }
    else
    {
      AswStatusDialog::AppendText(Translate("   Add mineral oil to the FFPE samples..."));
      MECC::TraceComment(Translate("************* Now add mineral oil to FFPE samples .............."));
      TRUSEQPROCESSES::Add_Oil(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.HSP_HHS3, ML_STAR._Oil);
      TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    }
  }
  if (AnswerFFPE > 1)
  {
    MECC::TraceComment(Translate("************* We have at least some non-FFPE samples  ************"));
    AswStatusDialog::AppendText(Translate("   Add mineral oil to the non-FFPE samples..."));
    MECC::TraceComment(Translate("************* Now add mineral oil to non-FFPE samples .............."));
    TRUSEQPROCESSES::Add_Oil(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.HSP_HHS3_NonFFPE, ML_STAR._Oil);
    TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    MECC::TraceComment(Translate("************* Now move HSP to 94C HHS .............."));
    AswStatusDialog::AppendText(Translate("   Move to 94C HHS..."));
    TRUSEQPREP::GetHHSTemperature(HHS1);
    TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_HHS1, 0, 0, GripperMode, GripperSequence);
    if( 0 == Incubate_DFP_94C.SetTimer(480) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Trace ("***** Now incubating at 94C for 480s (8min)...");
    AswStatusDialog::AppendText(Translate("   Incubating at 94C..."));
    WaitForAndCheckTimer(Incubate_DFP_94C);
    MECC::TraceComment(Translate("************* Now move to CPAC .............."));
    AswStatusDialog::AppendText(Translate("   Moving to CPAC..."));
    TRUSEQPREP::GetHHSTemperature(HHS1);
    TRUSEQPREP::CheckCPACTemperature(12, SimOn);
    TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS1, ML_STAR.HSP_CPAC, 0, 0, GripperMode, GripperSequence);
    if( 0 == Cooling_DFP.SetTimer(60) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Trace ("***** Now cooling the plate .......");
    AswStatusDialog::AppendText(Translate("   Cooling the plate..."));
    WaitForAndCheckTimer(Cooling_DFP);
    MECC::TraceComment(Translate("************* Now move to RT HHS .............."));
    Trace ("***** Now moving to shaker.......");
    TRUSEQPREP::CheckCPACTemperature(12, SimOn);
    TRUSEQPREP::GetHHSTemperature(HHS3);
    TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_CPAC, ML_STAR.HSP_HHS3, 0, 1, GripperMode, GripperSequence);
    if (AnswerFFPE == 3)
    {
      AswStatusDialog::AppendText(Translate("   Transfer non-FFPE samples to FFPE plate..."));
      MECC::TraceComment(Translate("************* Transfer non-FFPE samples to FFPE plate .............."));
      StartPosition_FFPE = Samples_FFPE + 1;
      ML_STAR.HSP_Pipette.SetCurrentPosition(StartPosition_FFPE);
      {
        loopCounter1 = 0;
        while (
           (ML_STAR.HSP_HHS3_NonFFPE.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.HSP_Pipette, 1, ML_STAR.MlStar50ulTipWithFilter, 1, ML_STAR.HSP_HHS3_NonFFPE, 1);
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_5 ;
          err.Clear();
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          errLabel_5 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            TRUSEQPROCESSES::ErrorHandling_TipPickup(ML_STAR, ML_STAR.MlStar50ulTipWithFilter);
          }   /* end if from skip handler if no error */
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.HSP_HHS3_NonFFPE.GetCurrentPosition() > 0 && ML_STAR.HSP_HHS3_NonFFPE.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.HSP_Pipette.SetMax(ML_STAR.HSP_Pipette.GetTotal());
        ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
        ML_STAR.HSP_HHS3_NonFFPE.SetMax(ML_STAR.HSP_HHS3_NonFFPE.GetTotal());
        ML_STAR.HSP_Pipette.SetCurrentPosition(1);
        ML_STAR.HSP_HHS3_NonFFPE.SetCurrentPosition(1);
      }
      ML_STAR.HSP_Pipette.SetCurrentPosition(1);
      TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
      MECC::TraceComment(Translate("************* Discard non-FFPE samples plate .............."));
      TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_Waste, 0, 0, GripperMode, GripperSequence);
      MECC::TraceComment(Translate("************* Move combined plate to shaker .............."));
      TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_HHS3, 0, 1, GripperMode, GripperSequence);
    }
  }
  TRUSEQPREP::SetHHSTemperature(HHS1, 70);
  MECC::TraceComment(Translate("***** SYNTHESIZE FIRST STRAND cDNA *****"));
  AswStatusDialog::AppendText(Translate("   Synthesizing first strand cDNA..."));
  MECC::TraceComment(Translate("************* Now pipetting FSA (First Strand Synthesis Mix Act D plus SuperScript II Mix) .............."));
  AswStatusDialog::AppendText(Translate("      Adding FSA/Superscript II..."));
  TRUSEQPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.Vial_FSA, ML_STAR.HSP_HHS3, ML_STAR.MlStar50ulTipWithFilter, 8, Translate("TruSeq_50F_FSA_SurfaceEmpty"), 5);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  AswStatusDialog::AppendText(Translate("      Shaking to mix..."));
  TRUSEQPREP::Shake(HHS3, 1600, 20);
  if( 0 == Incubate_DFP_25C.SetTimer(600) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at 25C for 600s.......");
  AswStatusDialog::AppendText(Translate("      Incubating at 25C..."));
  WaitForAndCheckTimer(Incubate_DFP_25C);
  MECC::TraceComment(Translate("************* Now move to 42C HHS .............."));
  AswStatusDialog::AppendText(Translate("      Moving to 42C HHS..."));
  TRUSEQPREP::GetHHSTemperature(HHS3);
  TRUSEQPREP::GetHHSTemperature(HHS2);
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_HHS2, 0, 0, GripperMode, GripperSequence);
  if( 0 == Incubate_DFP_42C.SetTimer(960) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at 42C .......");
  AswStatusDialog::AppendText(Translate("      Incubating at 42C..."));
  WaitForAndCheckTimer(Incubate_DFP_42C);
  MECC::TraceComment(Translate("************* Now move to 70C HHS .............."));
  AswStatusDialog::AppendText(Translate("      Moving to 70C HHS..."));
  TRUSEQPREP::GetHHSTemperature(HHS2);
  TRUSEQPREP::GetHHSTemperature(HHS1);
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS2, ML_STAR.HSP_HHS1, 0, 0, GripperMode, GripperSequence);
  if( 0 == Incubate_DFP_70C.SetTimer(900) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at 70C for 900s.......");
  NumberOfTipsRequired = NumberOfSamples * 2;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  AswStatusDialog::AppendText(Translate("      Incubating at 70C..."));
  WaitForAndCheckTimer(Incubate_DFP_70C);
  MECC::TraceComment(Translate("************* Now move to CPAC .............."));
  AswStatusDialog::AppendText(Translate("      Moving to CPAC..."));
  TRUSEQPREP::GetHHSTemperature(HHS1);
  TRUSEQPREP::CheckCPACTemperature(12, SimOn);
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS1, ML_STAR.HSP_CPAC, 0, 0, GripperMode, GripperSequence);
  if( 0 == Cooling_DFP.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now cooling the plate down  .......");
  AswStatusDialog::AppendText(Translate("      Cooling the plate..."));
  WaitForAndCheckTimer(Cooling_DFP);
  MECC::TraceComment(Translate("************* Now move to RT HHS .............."));
  AswStatusDialog::AppendText(Translate("      Moving to shaker..."));
  TRUSEQPREP::CheckCPACTemperature(12, SimOn);
  TRUSEQPREP::GetHHSTemperature(HHS3);
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_CPAC, ML_STAR.HSP_HHS3, 0, 1, GripperMode, GripperSequence);
  TRUSEQPREP::SetCPACTemperature(16);
  MECC::TraceComment(Translate("***** SYNTHESIZE SECOND STRAND cDNA *****\n"));
  AswStatusDialog::AppendText(Translate("   Synthesizing second strand cDNA..."));
  MECC::TraceComment(Translate("************* Now pipetting Resuspension Buffer .............."));
  AswStatusDialog::AppendText(Translate("      Now adding RSB..."));
  TRUSEQPROCESSES::Add_Control_1TubeOnly(ML_STAR, NumberOfSamples, 2, Dummy_NoControl, ML_STAR._RSB, ML_STAR.HSP_HHS3, ML_STAR.MlStar50ulTipWithFilter, 5, Translate("TruSeq_50F_DTE_SurfaceEmpty"));
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now pipetting SMM (Second Strand Marking Master Mix) .............."));
  AswStatusDialog::AppendText(Translate("      Now adding SMM..."));
  TRUSEQPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.Vial_SMM, ML_STAR.HSP_HHS3, ML_STAR.MlStar50ulTipWithFilter, 20, Translate("TruSeq_50F_SMM_SurfaceEmpty"), 5);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  TRUSEQPREP::Shake(HHS3, 1600, 20);
  MECC::TraceComment(Translate("************* Now move to 16C CPAC .............."));
  AswStatusDialog::AppendText(Translate("      Moving to CPAC..."));
  TRUSEQPREP::CheckCPACTemperature(18, SimOn);
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_CPAC, 0, 0, GripperMode, GripperSequence);
  if( 0 == Incubate_DFP_16C.SetTimer(3600) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at 16C for 3600s......");
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the CCP plate..............\n****************************************************************"));
  AswStatusDialog::AppendText(Translate("         While incubating at 16C, bringing CCP plate to deck..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack2, ML_STAR.MIDI_HHS3, TrackToScanBarcode, 0, 1, GripperMode, GripperSequence);
  Check_TipQty(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 8, 1000);
  Trace ("***** ... Still incubating at 16C for 1800s......");
  AswStatusDialog::AppendText(Translate("      Incubating at 16C..."));
  WaitForAndCheckTimer(Incubate_DFP_16C);
  MECC::TraceComment(Translate("************* Now move to carrier .............."));
  AswStatusDialog::AppendText(Translate("     Moving plate back to carrier..."));
  TRUSEQPREP::CheckCPACTemperature(18, SimOn);
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_CPAC, ML_STAR.HSP_Pipette, 0, 1, GripperMode, GripperSequence);
  SeqIncrement(ML_STAR.Stack2, 1);
  TRUSEQPREP::SetCPACTemperature(4);
  AswStatusDialog::AppendText(Translate("      Clean up..."));
  MECC::TraceComment(Translate("************* Pipette AMPure beads to new MIDI (CCP)  ***************"));
  AswStatusDialog::AppendText(Translate("         While incubating at 16C, pipette beads to MIDI..."));
  TRUSEQPROCESSES::Add_AmpureMulti(ML_STAR, ML_STAR._Beads_AMPure, ML_STAR.MIDI_HHS3, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, NumberOfSamples, 90);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  CleanUp(1, 50, 135, 17.5, ML_STAR.HSP_Pipette, 2, ML_STAR.HSP_Waste);
  AswStatusDialog::AppendText(Translate("      Clean up complete. Preparing for user intervention (spin down)..."));
  MECC::TraceComment(Translate("********** Option to spin down plate .............."));
  AswStatusDialog::AppendText(Translate("      Move MIDI to carrier and unload carrier..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_Pipette, 0, 0, 0, GripperMode, GripperSequence);
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  EmailNotify(Translate("Test@Test.com"), Translate("Hamilton STAR waiting on user prompt"), Translate("User intervention needed.  Please check system and respond to prompt to continue"));
  dialogHandle_1.SetOutput(Translate("Spin down the MIDI plate.  \n\nWhen finished, put the plate back on the plate-tip carrier and click OK."));
  dialogHandle_1.ShowOutput(Translate("Option to Spin Down Plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  if (AnswerAdapterLabware == 1)
  {
    dialogHandle_4.SetOutput(Translate("Place RAP plate on 3rd position of plate-tip carrier."));
    dialogHandle_4.ShowOutput(Translate("Preparing for Ligation"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  dialogHandle_3.SetOutput(Translate("Do you want to reload tips at this time?"));
  AnswerMoreTips = dialogHandle_3.ShowOutput(Translate("More tips?"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
  if (AnswerMoreTips == 6)
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    dialogHandle_2.SetOutput(Translate("Please fill the unloaded carriers with the appropriate kind of tips."), Translate("\nThen click OK to have the filled carriers reloaded onto the deck."), Translate("\n\nThis may also be a good time to check/empty the tip waste."));
    dialogHandle_2.ShowOutput(Translate("Replenish Tips"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
    TRUSEQPREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 96, 96, 0);
    TRUSEQPREP::GenerateTipCarrierBarcodeStrings(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, TipCarBCsToCheck_50_2, TipCarBCsToCheck_50_1, TipCarBCsToCheck_300_2, TipCarBCsToCheck_300_1, PlateCarBCsToCheck_PCR);
    if (TipCarBCsToCheck_50_2 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_50F_2:  ", TipCarBCsToCheck_50_2);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_50_1 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_50F_1:  ", TipCarBCsToCheck_50_1);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_300_2 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_STF_2:  ", TipCarBCsToCheck_300_2);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_300_1 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_STF_1:  ", TipCarBCsToCheck_300_1);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  AswStatusDialog::AppendText(Translate("      Reloading carrier..."));
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  AswStatusDialog::AppendText(Translate("      Final magnet step in Process 1..."));
  MECC::TraceComment(Translate("********** Now move to magnet .............."));
  AswStatusDialog::AppendText(Translate("         Move plate to magnet..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_OnMagnet, 0, 0, 0, GripperMode, GripperSequence);
  if( 0 == WaitForMagnet.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Waiting for magnet (300s).......");
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the ALP plate..............\n****************************************************************"));
  AswStatusDialog::AppendText(Translate("         Moving ALP plate to deck..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack2, ML_STAR.MIDI_Pipette, TrackToScanBarcode, 0, 1, GripperMode, GripperSequence);
  AswStatusDialog::AppendText(Translate("         Waiting for magnet..."));
  WaitForAndCheckTimer(WaitForMagnet);
  MECC::TraceComment(Translate("************* Now transferring from CCP to ALP .............."));
  AswStatusDialog::AppendText(Translate("         Transferring sample to ALP plate..."));
  TRUSEQPROCESSES::Transfer_PlateToPlate(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Pipette, 15, Translate("TruSeq_50F_SampleInRSB_SurfaceEmpty"), 0.6, 0.5);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now move plate to waste.............."));
  AswStatusDialog::AppendText(Translate("      Move MIDI to waste..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 0, 1, GripperMode, GripperSequence);
  AswStatusDialog::AppendText(Translate("      Process 1 Complete."));
  if (AnswerStopPoint == 1)
  {
    MECC::TraceComment(Translate("************************** Stopping Point:  Second Strand cDNA Synthesis now complete **************************"));
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  PROCESS 1 - DEPLETE, FRAGMENT, AND SYNTHESIZE ********************"));
}

private function Process2_AdenylateLigate(  ) void {
  private timer Incubate_ALP_37C;
  private timer Incubate_ALP_70C;
  private timer Chill_ALP;
  private timer Incubate_ALP_30C;
  private timer WaitForMagnet;
  private timer HHS_at_80C;
  private sequence Dummy_NoControl;
  private variable NumberOfTipsRequired;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  PROCESS 2 - ADENYLATE AND LIGATE ********************\n*************************************************************************************************************************"));
  MECC::TraceComment(Translate("***** ADENYLATE 3' ENDS *****"));
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(Translate("TruSeq RNA Access Library Preparation"));
  AswStatusDialog::SetStatusText(Translate("Process 2:  Adenylate and Ligate"));
  NumberOfTipsRequired = NumberOfSamples * 2;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  MECC::TraceComment(Translate("************* Now pipetting Resuspension Buffer .............."));
  AswStatusDialog::AppendText(Translate("   Now adding RSB..."));
  TRUSEQPROCESSES::Add_Control_1TubeOnly(ML_STAR, NumberOfSamples, 2, Dummy_NoControl, ML_STAR._RSB, ML_STAR.MIDI_Pipette, ML_STAR.MlStar50ulTipWithFilter, 2.5, Translate("TruSeq_50F_DTA_SurfaceEmpty"));
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now pipetting ATL (A-Tailing Mix) .............."));
  AswStatusDialog::AppendText(Translate("   Now adding ATL..."));
  TRUSEQPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.Vial_ATL, ML_STAR.MIDI_Pipette, ML_STAR.MlStar50ulTipWithFilter, 12.5, Translate("TruSeq_50F_ATL_SurfaceEmpty"), 3);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now move to Shaker .............."));
  AswStatusDialog::AppendText(Translate("   Now moving to shaker..."));
  TRUSEQPREP::GetHHSTemperature(HHS3);
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_HHS3, 0, 1, 0, GripperMode, GripperSequence);
  MECC::TraceComment(Translate("************* Shake .............."));
  AswStatusDialog::AppendText(Translate("   Shaking..."));
  TRUSEQPREP::Shake(HHS3, 1800, 120);
  MECC::TraceComment(Translate("************* Now move to 37C HHS .............."));
  AswStatusDialog::AppendText(Translate("   Now moving to 37C HHS..."));
  TRUSEQPREP::GetHHSTemperature(HHS5);
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_HHS2, 0, 1, 0, GripperMode, GripperSequence);
  if( 0 == Incubate_ALP_37C.SetTimer(1800) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at 37C for 1800s.......");
  NumberOfTipsRequired = NumberOfSamples * 5;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  AswStatusDialog::AppendText(Translate("   Incubating at 37C..."));
  WaitForAndCheckTimer(Incubate_ALP_37C);
  TRUSEQPREP::SetHHSTemperature(HHS5, 30);
  MECC::TraceComment(Translate("************* Now move to 70C HHS .............."));
  AswStatusDialog::AppendText(Translate("   Moving to 70C HHS..."));
  TRUSEQPREP::GetHHSTemperature(HHS5);
  TRUSEQPREP::GetHHSTemperature(HHS4);
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS2, ML_STAR.MIDI_HHS1, 0, 1, 0, GripperMode, GripperSequence);
  if( 0 == Incubate_ALP_70C.SetTimer(420) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == HHS_at_80C.SetTimer(180) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  AswStatusDialog::AppendText(Translate("   Incubating at 70C..."));
  WaitForAndCheckTimer(HHS_at_80C);
  TRUSEQPREP::GetHHSTemperature(HHS4);
  TRUSEQPREP::SetHHSTemperature(HHS4, 70);
  Trace ("***** Finishing incubating at 70C .......");
  WaitForAndCheckTimer(Incubate_ALP_70C);
  MECC::TraceComment(Translate("************* Now move to CPAC .............."));
  AswStatusDialog::AppendText(Translate("   Moving to CPAC..."));
  TRUSEQPREP::GetHHSTemperature(HHS4);
  TRUSEQPREP::CheckCPACTemperature(12, SimOn);
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS1, ML_STAR.MIDI_CPAC, 0, 1, 0, GripperMode, GripperSequence);
  if( 0 == Chill_ALP.SetTimer(240) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("We found during temperature testing, that it takes 4 minutes for the liquid to cool from 70C to 16C."));
  Trace ("***** Now chilling the plate  .......");
  AswStatusDialog::AppendText(Translate("   Cooling the plate..."));
  WaitForAndCheckTimer(Chill_ALP);
  MECC::TraceComment(Translate("***** LIGATE ADAPTERS *****"));
  MECC::TraceComment(Translate("************* Now move to RT HHS .............."));
  AswStatusDialog::AppendText(Translate("   Moving to shaker..."));
  TRUSEQPREP::CheckCPACTemperature(12, SimOn);
  TRUSEQPREP::GetHHSTemperature(HHS3);
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_CPAC, ML_STAR.MIDI_HHS3, 0, 1, 1, GripperMode, GripperSequence);
  TRUSEQPREP::SetCPACTemperature(20);
  MECC::TraceComment(Translate("************* Now pipetting  Resuspension Buffer .............."));
  AswStatusDialog::AppendText(Translate("   Pipetting RSB..."));
  TRUSEQPROCESSES::Add_Control_1TubeOnly(ML_STAR, NumberOfSamples, 2, Dummy_NoControl, ML_STAR._RSB, ML_STAR.MIDI_HHS3, ML_STAR.MlStar50ulTipWithFilter, 2.5, Translate("TruSeq_50F_DTL_SurfaceEmpty"));
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now pipetting LIG (Ligation Mix) .............."));
  AswStatusDialog::AppendText(Translate("   Pipetting LIG..."));
  TRUSEQPROCESSES::Add_ReagentFromHalfHeightVial(ML_STAR, NumberOfSamples, ML_STAR.Vial_LIG, ML_STAR.MIDI_HHS3, ML_STAR.MlStar50ulTipWithFilter, 2.5, Translate("TruSeq_50F_LIG_SurfaceEmpty"), 3);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now pipetting Adapters .............."));
  AswStatusDialog::AppendText(Translate("   Pipetting adapters..."));
  if (AnswerAdapterLabware == 1)
  {
    TRUSEQPROCESSES::Add_AdaptersViaRAP(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.RAP_Plate, ML_STAR.MIDI_HHS3, array_Index1Positions, array_Index2Positions, array_ALPPositions);
  }
  else
  {
    TRUSEQPROCESSES::Add_AdaptersViaVials(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.AdapterVials_UniquePerRun, ML_STAR.MIDI_HHS3_ForAdapters, NumberOfIndexes, array_Index1Positions, array_Index2Positions, array_ALPPositions);
  }
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Shaking .............."));
  AswStatusDialog::AppendText(Translate("   Shake to mix..."));
  TRUSEQPREP::Shake(HHS3, 1800, 120);
  MECC::TraceComment(Translate("************* Now move to 30C HHS .............."));
  AswStatusDialog::AppendText(Translate("   Moving to 30C HHS..."));
  TRUSEQPREP::GetHHSTemperature(HHS5);
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_HHS2, 0, 1, 0, GripperMode, GripperSequence);
  if( 0 == Incubate_ALP_30C.SetTimer(600) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at 30C for 600s.......");
  AswStatusDialog::AppendText(Translate("   Incubating at 30C..."));
  WaitForAndCheckTimer(Incubate_ALP_30C);
  MECC::TraceComment(Translate("************* Now move to RT HHS .............."));
  AswStatusDialog::AppendText(Translate("   Moving to shaker..."));
  TRUSEQPREP::GetHHSTemperature(HHS5);
  TRUSEQPREP::GetHHSTemperature(HHS3);
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS2, ML_STAR.MIDI_HHS3, 0, 1, 1, GripperMode, GripperSequence);
  MECC::TraceComment(Translate("************* Now pipetting STL (Stop Ligation Buffer) .............."));
  AswStatusDialog::AppendText(Translate("   Pipetting STL..."));
  TRUSEQPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.Vial_STL, ML_STAR.MIDI_HHS3, ML_STAR.MlStar50ulTipWithFilter, 5, Translate("TruSeq_50F_STL_SurfaceEmpty"), 3);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Shaking .............."));
  AswStatusDialog::AppendText(Translate("   Shake to mix..."));
  TRUSEQPREP::Shake(HHS3, 1800, 120);
  MECC::TraceComment(Translate("************* Pipette AMPure beads to MIDI with samples ***************"));
  AswStatusDialog::AppendText(Translate("   Pipette beads to MIDI..."));
  TRUSEQPROCESSES::Add_AmpureSingle(ML_STAR, ML_STAR._Beads_AMPure, ML_STAR.MIDI_HHS3, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfSamples, 42, 1, 1);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  AswStatusDialog::AppendText(Translate("   Cleanup 1..."));
  CleanUp(0, 0, 79.5, 52.5, ML_STAR.MIDI_HHS3, 1, ML_STAR.MIDI_Waste);
  MECC::TraceComment(Translate("********** Now move to magnet .............."));
  AswStatusDialog::AppendText(Translate("   Move to magnet..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 0, GripperMode, GripperSequence);
  if( 0 == WaitForMagnet.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Waiting for magnet (300s).......");
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the CAP plate..............\n****************************************************************"));
  AswStatusDialog::AppendText(Translate("         While waiting for magnet, bringing CAP plate to deck..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack3, ML_STAR.MIDI_HHS3, TrackToScanBarcode, 0, 1, GripperMode, GripperSequence);
  SeqIncrement(ML_STAR.Stack3, 1);
  MECC::TraceComment(Translate("************* Pipette AMPure beads to new MIDI (CAP) while samples are still on the magnet ***************"));
  AswStatusDialog::AppendText(Translate("   While waiting for magnet, pipette beads to MIDI..."));
  TRUSEQPROCESSES::Add_AmpureSingle(ML_STAR, ML_STAR._Beads_AMPure, ML_STAR.MIDI_HHS3, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfSamples, 50, 0, 1);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  AswStatusDialog::AppendText(Translate("   Waiting for magnet..."));
  WaitForAndCheckTimer(WaitForMagnet);
  AswStatusDialog::AppendText(Translate("   Cleanup 2..."));
  CleanUp(1, 50, 100, 22.5, ML_STAR.MIDI_OnMagnet, 1, ML_STAR.MIDI_Waste);
  MECC::TraceComment(Translate("********** Now move to magnet .............."));
  AswStatusDialog::AppendText(Translate("   Move to magnet..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 0, GripperMode, GripperSequence);
  if( 0 == WaitForMagnet.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Waiting for magnet (300s).......");
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the PCR plate..............\n****************************************************************"));
  AswStatusDialog::AppendText(Translate("         While waiting for magnet, bringing PCR plate to deck..."));
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.Stack4, ML_STAR.HSP_Pipette, TrackToScanBarcode, 1, GripperMode, GripperSequence);
  SeqIncrement(ML_STAR.Stack4, 1);
  AswStatusDialog::AppendText(Translate("   Waiting for magnet..."));
  WaitForAndCheckTimer(WaitForMagnet);
  MECC::TraceComment(Translate("************* Now transferring from CAP to PCR .............."));
  AswStatusDialog::AppendText(Translate("         Transferring sample to PCR plate..."));
  TRUSEQPROCESSES::Transfer_CleanSample(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.HSP_Pipette, 20);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now move to waste .............."));
  AswStatusDialog::AppendText(Translate("   Discarding CAP plate..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 0, 1, GripperMode, GripperSequence);
  AswStatusDialog::AppendText(Translate("      Process 2 Complete."));
  if (AnswerStopPoint == 2)
  {
    MECC::TraceComment(Translate("************************** Stopping Point:  Ligate Adapters now complete **************************"));
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  PROCESS 2 - ADENYLATE AND LIGATE ********************"));
}

private function Process3_PCRAmplification(  ) void {
  private dialog dialogHandle_6;
  private timer WaitForMagnet;
  private dialog dialogHandle_7;
  private dialog dialogHandle_8;
  private dialog dialogHandle_9;
  private variable AnswerMoreTips;
  private dialog dialogHandle_10;
  private dialog dialogHandle_11;
  private dialog dialogHandle_12;
  private dialog dialogHandle_13;
  private variable NumberOfTipsRequired;
  MECC::TraceComment(Translate("*******************************************************************************************************************\n******************** SUBMETHOD START:  PROCESS 3 - PCR AMPLIFICATION ********************\n*******************************************************************************************************************"));
  MECC::TraceComment(Translate("***** ENRICH DNA FRAGMENTS *****"));
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(Translate("TruSeq RNA Access Library Preparation"));
  AswStatusDialog::SetStatusText(Translate("Process 3:  PCR Amplification"));
  NumberOfTipsRequired = NumberOfSamples * 2;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  MECC::TraceComment(Translate("************* Now pipetting PPC (PCR Primer Cocktail) .............."));
  AswStatusDialog::AppendText(Translate("   Add PPC..."));
  TRUSEQPROCESSES::Add_ReagentFromHalfHeightVial(ML_STAR, NumberOfSamples, ML_STAR.Vial_PPC, ML_STAR.HSP_Pipette, ML_STAR.MlStar50ulTipWithFilter, 5, Translate("TruSeq_50F_PPC_SurfaceEmpty"), 5);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now pipetting PMM (PCR Master Mix) .............."));
  AswStatusDialog::AppendText(Translate("   Add PMM..."));
  TRUSEQPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.Vial_PMM, ML_STAR.HSP_Pipette, ML_STAR.MlStar50ulTipWithFilter, 25, Translate("TruSeq_50F_PMM_SurfaceEmpty"), 5);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now move to RT HHS .............."));
  AswStatusDialog::AppendText(Translate("   Move to shaker..."));
  TRUSEQPREP::GetHHSTemperature(HHS3);
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_HHS3, 0, 0, GripperMode, GripperSequence);
  MECC::TraceComment(Translate("************* Shake .............."));
  AswStatusDialog::AppendText(Translate("   Shaking.."));
  TRUSEQPREP::Shake(HHS3, 1600, 20);
  MECC::TraceComment(Translate("************* Now move to carrier .............."));
  AswStatusDialog::AppendText(Translate("   Move back to carrier..."));
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_Pipette, 0, 1, GripperMode, GripperSequence);
  AswStatusDialog::AppendText(Translate("   Offline thermal cycling..."));
  EmailNotify(Translate("Test@Test.com"), Translate("Hamilton STAR waiting on user prompt"), Translate("User intervention needed.  Please check system and respond to prompt to continue"));
  dialogHandle_6.SetOutput(Translate("The samples are ready for thermal cycling.  \n\nClick OK to have the samples (and reagent vials) unloaded from the deck."));
  dialogHandle_6.ShowOutput(Translate("Ready for Offline PCR Amplification"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  if (AnswerStartPoint <= 2)
  {
    if (AnswerAdapterLabware == 2)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
  }
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  if (AnswerStartPoint == 1)
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  }
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  Trace ("Samples have been unloaded.  Now waiting for thermal cycling to be completed offline ...");
  AswStatusDialog::AppendText(Translate("      Opportunity to add more tips..."));
  dialogHandle_9.SetOutput(Translate("Do you want to reload tips at this time?"));
  AnswerMoreTips = dialogHandle_9.ShowOutput(Translate("More tips?"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
  if (AnswerMoreTips == 6)
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    dialogHandle_8.SetOutput(Translate("Please fill the unloaded carriers with the appropriate kind of tips."), Translate("\nThen click OK to have the filled carriers reloaded onto the deck."), Translate("\n\nThis may also be a good time to check/empty the tip waste."));
    dialogHandle_8.ShowOutput(Translate("Replenish Tips"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
    TRUSEQPREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 96, 96, 0);
    TRUSEQPREP::GenerateTipCarrierBarcodeStrings(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, TipCarBCsToCheck_50_2, TipCarBCsToCheck_50_1, TipCarBCsToCheck_300_2, TipCarBCsToCheck_300_1, PlateCarBCsToCheck_PCR);
    if (TipCarBCsToCheck_50_2 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_50F_2:  ", TipCarBCsToCheck_50_2);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_50_1 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_50F_1:  ", TipCarBCsToCheck_50_1);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_300_2 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_STF_2:  ", TipCarBCsToCheck_300_2);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_300_1 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_STF_1:  ", TipCarBCsToCheck_300_1);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  else
  {
    NumberOfTipsRequired = NumberOfSamples * 1;
    Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
    Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 300);
  }
  AswStatusDialog::AppendText(Translate("   Offline thermal cycling..."));
  dialogHandle_7.SetOutput(Translate("When the samples have finished thermal cycling,"), Translate("\nplace the PCR plate back onto the plate-tip carrier"), Translate("\n(in the 4th position from the rear),"), Translate("\nand click OK to load the samples back onto the deck."), Translate("\n\n(No other plates are required to be on the plate-tip carrier.)"));
  dialogHandle_7.ShowOutput(Translate("Ready for PCR Clean Up"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
  AswStatusDialog::AppendText(Translate("   Loading plate after thermal cycling..."));
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the CPP plate..............\n****************************************************************"));
  AswStatusDialog::AppendText(Translate("   Bringing CPP plate to deck..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack3, ML_STAR.MIDI_HHS3, TrackToScanBarcode, 0, 1, GripperMode, GripperSequence);
  SeqIncrement(ML_STAR.Stack3, 1);
  MECC::TraceComment(Translate("************* Pipette AMPure beads to new MIDI (CPP) ***************"));
  AswStatusDialog::AppendText(Translate("   Adding beads to CPP plate..."));
  TRUSEQPROCESSES::Add_AmpureSingle(ML_STAR, ML_STAR._Beads_AMPure, ML_STAR.MIDI_HHS3, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfSamples, VolumeAmpureBeadsForCleanupPCR, 0, 0);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  AswStatusDialog::AppendText(Translate("   Cleanup..."));
  CleanUp(1, 50, 95, 17.5, ML_STAR.HSP_Pipette, 2, ML_STAR.HSP_Waste);
  MECC::TraceComment(Translate("********** Option to spin down plate .............."));
  AswStatusDialog::AppendText(Translate("   Move to carrier..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_Pipette, 0, 0, 0, GripperMode, GripperSequence);
  AswStatusDialog::AppendText(Translate("   Unloading carrier..."));
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  AswStatusDialog::AppendText(Translate("   Option to spin down plate..."));
  EmailNotify(Translate("Test@Test.com"), Translate("Hamilton STAR waiting on user prompt"), Translate("User intervention needed.  Please check system and respond to prompt to continue"));
  dialogHandle_13.SetOutput(Translate("Spin down the MIDI plate.  \n\nWhen finished, put the plate back on the plate-tip carrier and click OK."));
  dialogHandle_13.ShowOutput(Translate("Option to Spin Down Plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  dialogHandle_12.SetOutput(Translate("Do you want to reload tips at this time?"));
  AnswerMoreTips = dialogHandle_12.ShowOutput(Translate("More tips?"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
  if (AnswerMoreTips == 6)
  {
    AswStatusDialog::AppendText(Translate("   Adding more tips..."));
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    dialogHandle_11.SetOutput(Translate("Please fill the unloaded carriers with the appropriate kind of tips."), Translate("\nThen click OK to have the filled carriers reloaded onto the deck."), Translate("\n\nThis may also be a good time to check/empty the tip waste."));
    dialogHandle_11.ShowOutput(Translate("Replenish Tips"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
    TRUSEQPREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 96, 96, 0);
    TRUSEQPREP::GenerateTipCarrierBarcodeStrings(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, TipCarBCsToCheck_50_2, TipCarBCsToCheck_50_1, TipCarBCsToCheck_300_2, TipCarBCsToCheck_300_1, PlateCarBCsToCheck_PCR);
    if (TipCarBCsToCheck_50_2 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_50F_2:  ", TipCarBCsToCheck_50_2);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_50_1 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_50F_1:  ", TipCarBCsToCheck_50_1);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_300_2 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_STF_2:  ", TipCarBCsToCheck_300_2);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_300_1 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_STF_1:  ", TipCarBCsToCheck_300_1);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  AswStatusDialog::AppendText(Translate("   Reloading sample plate carrier..."));
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  MECC::TraceComment(Translate("********** Now move to magnet .............."));
  AswStatusDialog::AppendText(Translate("   Moving to magnet..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_OnMagnet, 0, 0, 0, GripperMode, GripperSequence);
  if( 0 == WaitForMagnet.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Waiting for magnet (300s).......");
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the TSP1 plate..............\n****************************************************************"));
  AswStatusDialog::AppendText(Translate("   Bringing the TSP1 plate to the deck..."));
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.Stack4, ML_STAR.HSP_Pipette, TrackToScanBarcode, 1, GripperMode, GripperSequence);
  SeqIncrement(ML_STAR.Stack4, 1);
  AswStatusDialog::AppendText(Translate("   Waiting for magnet..."));
  WaitForAndCheckTimer(WaitForMagnet);
  MECC::TraceComment(Translate("************* Now transferring from CPP to TSP1 .............."));
  AswStatusDialog::AppendText(Translate("   Transferring sample to TSP1 plate..."));
  TRUSEQPROCESSES::Transfer_CleanSample(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.HSP_Pipette, 15);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now move to waste .............."));
  AswStatusDialog::AppendText(Translate("   Discarding MIDI plate..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 0, 1, GripperMode, GripperSequence);
  if (AnswerStopPoint == 4)
  {
    AswStatusDialog::AppendText(Translate("   Offline Library Validation..."));
    dialogHandle_10.SetOutput(Translate("The samples are ready for Library Validation.  Click OK to have the TSP1 plate unloaded from the deck."));
    dialogHandle_10.ShowOutput(Translate("Ready for Offline Library Validation"), hslOKOnly | hslInformation | hslDefButton1, 60);
  }
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  Trace ("Samples have been unloaded.  Now waiting for library validation to be completed offline ...");
  AswStatusDialog::AppendText(Translate("      Process 3 Complete."));
  if (AnswerStopPoint == 3)
  {
    MECC::TraceComment(Translate("************************** Stopping Point:  PCR Amplification now complete **************************"));
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  PROCESS 3 - PCR AMPLIFICATION ********************"));
}

private function CleanUp( variable var_TransferFromHSPtoMIDI, variable var_VolumeSample, variable var_VolumeSupernatant, variable var_ResuspensionBuffer, sequence & seq_SampleSourcePosition, variable var_SamplePlateType, sequence & seq_PlateWastePosition ) void {
  private variable loopCounter4;
  private variable loopCounter5;
  private timer WaitForMagnet;
  private timer Incubate_RT_2min;
  private timer EvaporationTime;
  private timer Incubate_RT_5min;
  private variable NumberOfTipsRequired;
  MECC::TraceComment(Translate("******************** SUBMETHOD START:  CLEANUP ********************"));
  if (var_TransferFromHSPtoMIDI == 1)
  {
    MECC::TraceComment(Translate("********** Transfer sample to plate with beads........"));
    AswStatusDialog::AppendText(Translate("         Transferring sample to plate with beads..."));
    {
      loopCounter4 = 0;
      while (
         (ML_STAR.MIDI_HHS3.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MIDI_HHS3, 1, ML_STAR.MlStar50ulTipWithFilter, 1, seq_SampleSourcePosition, 1);
        loopCounter4 = loopCounter4 + 1;
        onerror goto errLabel_14 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_14 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          TRUSEQPROCESSES::ErrorHandling_TipPickup(ML_STAR, ML_STAR.MlStar50ulTipWithFilter);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.MIDI_HHS3.GetCurrentPosition() > 0 && ML_STAR.MIDI_HHS3.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MIDI_HHS3.SetMax(ML_STAR.MIDI_HHS3.GetTotal());
      ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
      seq_SampleSourcePosition.SetMax(seq_SampleSourcePosition.GetTotal());
      ML_STAR.MIDI_HHS3.SetCurrentPosition(1);
      seq_SampleSourcePosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_SampleSourcePosition);
    {
      variable _FilterIdsArray_15[];
      variable _ColumnIdsArray_15[];
      variable _ColumnNamesArray_15[];
      variable _ExperimentsArray_15[];
      _FilterIdsArray_15.SetSize(0);
      _ColumnNamesArray_15.SetSize(14);
      _ColumnIdsArray_15.SetSize(14);
      _ColumnNamesArray_15.SetAt(0, "RecordId");
      _ColumnIdsArray_15.SetAt(0, 0);
      _ColumnNamesArray_15.SetAt(1, "TRackBC");
      _ColumnIdsArray_15.SetAt(1, 1);
      _ColumnNamesArray_15.SetAt(2, "TLabwareId");
      _ColumnIdsArray_15.SetAt(2, 2);
      _ColumnNamesArray_15.SetAt(3, "TPositionId");
      _ColumnIdsArray_15.SetAt(3, 3);
      _ColumnNamesArray_15.SetAt(4, "TPositionBC");
      _ColumnIdsArray_15.SetAt(4, 4);
      _ColumnNamesArray_15.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_15.SetAt(5, 5);
      _ColumnNamesArray_15.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_15.SetAt(6, 6);
      _ColumnNamesArray_15.SetAt(7, "TVolume");
      _ColumnIdsArray_15.SetAt(7, 7);
      _ColumnNamesArray_15.SetAt(8, "SRackBC");
      _ColumnIdsArray_15.SetAt(8, 8);
      _ColumnNamesArray_15.SetAt(9, "SLabwareId");
      _ColumnIdsArray_15.SetAt(9, 9);
      _ColumnNamesArray_15.SetAt(10, "SPositionId");
      _ColumnIdsArray_15.SetAt(10, 10);
      _ColumnNamesArray_15.SetAt(11, "SPositionBC");
      _ColumnIdsArray_15.SetAt(11, 11);
      _ColumnNamesArray_15.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_15.SetAt(12, 12);
      _ColumnNamesArray_15.SetAt(13, "UserName");
      _ColumnIdsArray_15.SetAt(13, 13);
      _ExperimentsArray_15.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.MIDI_HHS3, 3, _FilterIdsArray_15, 0, _ColumnIdsArray_15, _ColumnNamesArray_15, _ExperimentsArray_15, "SampleToBeadPlate_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
  }
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  TRUSEQPREP::GetHHSTemperature(HHS3);
  AswStatusDialog::AppendText(Translate("         Shaking to mix..."));
  TRUSEQPREP::Shake(HHS3, 1800, 120);
  if( 0 == Incubate_RT_5min.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at RT for NOW 300s .......");
  if (var_TransferFromHSPtoMIDI == 1)
  {
    MECC::TraceComment(Translate("**********  Now move to waste / storage .............."));
    AswStatusDialog::AppendText(Translate("         Discard plate..."));
    if (var_SamplePlateType == 1)
    {
      TRUSEQPROCESSES::MoveMIDI(ML_STAR, seq_SampleSourcePosition, seq_PlateWastePosition, 0, 0, 0, GripperMode, GripperSequence);
    }
    else
    {
      TRUSEQPROCESSES::MoveHSP(ML_STAR, seq_SampleSourcePosition, seq_PlateWastePosition, 0, 0, GripperMode, GripperSequence);
    }
  }
  NumberOfTipsRequired = NumberOfSamples * 3;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 300);
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, 16, 1000);
  AswStatusDialog::AppendText(Translate("         Incubating at room temperature..."));
  WaitForAndCheckTimer(Incubate_RT_5min);
  MECC::TraceComment(Translate("********** Now move to magnet .............."));
  AswStatusDialog::AppendText(Translate("         Move to magnet..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 1, GripperMode, GripperSequence);
  if( 0 == WaitForMagnet.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Waiting for magnet (300s).......");
  AswStatusDialog::AppendText(Translate("         Wait for magnet..."));
  WaitForAndCheckTimer(WaitForMagnet);
  MECC::TraceComment(Translate("********** Remove supernatant to waste ........"));
  AswStatusDialog::AppendText(Translate("         Remove supernatant..."));
  TRUSEQPROCESSES::Transfer_PlatetoWaste(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, 200, Translate("TruSeq_SVF_Waste_JetEmpty"));
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  {
    for(loopCounter5 = 0; loopCounter5 < 2;)
    {
      loopCounter5 = loopCounter5 + 1;
      AswStatusDialog::AppendText(Translate("         Add ethanol..."));
      TRUSEQPROCESSES::Add_Ethanol(ML_STAR, NumberOfSamples, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR._EtOH_80, ML_STAR.MIDI_OnMagnet, Translate("TruSeq_HVF_80PercentEtOH_JetPart"), TrackingEthanolVolume_80);
      TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
      MECC::TraceComment(Translate("********** Remove ethanol supernatant to waste ........"));
      AswStatusDialog::AppendText(Translate("         Remove ethanol..."));
      TRUSEQPROCESSES::Transfer_PlatetoWaste(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, 200, Translate("TruSeq_SVF_EthanolSupernatantToWaste_JetEmpty"));
      TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    }
  }
  if( 0 == EvaporationTime.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("********** Remove residual ethanol  ........"));
  AswStatusDialog::AppendText(Translate("         Remove residual ethanol..."));
  TRUSEQPROCESSES::Remove_ResidualEtOH(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, 20, Translate("TruSeq_50F_EtOH_JetEmpty"));
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  if (var_ResuspensionBuffer > 50)
  {
    NumberOfTipsRequired = NumberOfSamples * 1;
    Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
    Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 300);
  }
  else
  {
    NumberOfTipsRequired = NumberOfSamples * 2;
    Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  }
  Trace ("***** Now waiting for ethanol evaporation (as of 10/29/13, now 300s).......");
  AswStatusDialog::AppendText(Translate("         Drying..."));
  WaitForAndCheckTimer(EvaporationTime);
  MECC::TraceComment(Translate("********** Now move to RT HHS .............."));
  AswStatusDialog::AppendText(Translate("         Move to shaker..."));
  TRUSEQPREP::GetHHSTemperature(HHS3);
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_HHS3, 0, 0, 1, GripperMode, GripperSequence);
  MECC::TraceComment(Translate("********** Now pipetting Resuspension Buffer .............."));
  AswStatusDialog::AppendText(Translate("         Add RSB..."));
  if (var_ResuspensionBuffer <= 50)
  {
    TRUSEQPROCESSES::Add_RSB(ML_STAR, ML_STAR._RSB, ML_STAR.MIDI_HHS3, ML_STAR.MlStar50ulTipWithFilter, var_ResuspensionBuffer, 3);
  }
  else
  {
    TRUSEQPROCESSES::Add_RSB(ML_STAR, ML_STAR._RSB, ML_STAR.MIDI_HHS3, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, var_ResuspensionBuffer, 3);
  }
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  AswStatusDialog::AppendText(Translate("         Shake..."));
  TRUSEQPREP::Shake(HHS3, 1800, 120);
  if( 0 == Incubate_RT_2min.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at RT for 120s .......");
  AswStatusDialog::AppendText(Translate("         Incubating..."));
  WaitForAndCheckTimer(Incubate_RT_2min);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  CLEANUP ********************"));
}

private function WaitForAndCheckTimer( timer & IncubationTimer ) void {
  private variable ActualElapsedTime;
  Trace ("**********************************");
  Trace ("***** Waiting for timer........");
  Trace ("**********************************");
  TimerWasStopped = IncubationTimer.WaitTimer(hslTrue, hslTrue);
  if (0 == TimerWasStopped)
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (TimerWasStopped == 3)
  {
    MECC::TraceComment(Translate("***** WARNING!  The timer was stopped prematurely! *****"));
  }
  ActualElapsedTime = IncubationTimer.GetElapsedTime();
  Trace ("***** Actual Elapsed Time (seconds):  ", ActualElapsedTime, "        *****");
}

private function CalculateResources(  ) void {
  private variable Vol_EtOH80;
  private variable Vol_LIG;
  private variable Vol_ATL;
  private variable Vol_STL;
  private variable Vol_AmpBeads;
  private variable Vol_EPH;
  private variable Vol_PMM;
  private variable Vol_EtOH80_1;
  private variable Vol_EtOH80_2;
  private variable Vol_RSB1;
  private variable Vol_EtOH80_3;
  private variable Vol_RSB;
  private variable Vol_RSB2;
  private variable Vol_AmpBeads1;
  private variable Vol_SMM;
  private variable Vol_RSB3;
  private variable Vol_PPC;
  private variable Vol_AmpBeads2;
  private variable Vol_AmpBeads3;
  private variable Vol_FSA;
  private variable Vol_RSB_mL;
  private variable Vol_AmpBeads_mL;
  private variable Vol_EtOH80_mL;
  private variable StartingPlatePosition;
  private variable Text_Pos4;
  private variable Vol_EtOH80_mL_Tub1;
  private variable Vol_EtOH80_mL_Tub2;
  private variable Vol_EtOH80_mL_Tub3;
  private variable EtOH80_TubsRequired;
  private dialog customDialog_16;
  private variable RacksOf50s;
  private variable RacksOf300s;
  private variable Text_Pos5;
  private variable Vol_Oil_mL;
  private variable Vol_STL2;
  private variable Vol_LIG2;
  private variable Vol_ATL2;
  private variable Vol_FSA2;
  private variable SamplesMoreThan48;
  private variable Vol_PPC2;
  private variable Vol_SMM2;
  private variable Vol_PMM2;
  private variable Vol_EPH2;
  private variable Index1;
  private variable Index2;
  private variable Index1_loopCounter3;
  private variable Index2_loopCounter3;
  private variable loopCounter2;
  private variable loopCounter3;
  private variable FoundIndex;
  private variable RecordsToCheck;
  private variable arr_Compare[];
  private variable loopCounter1;
  private variable ExtraTips50;
  private variable TipsPerSample_1000_1;
  private variable ExtraTips300_1;
  private variable TipsPerSample_1000_2;
  private variable TipsPerSample_1000_3;
  private variable ExtraTips300_2;
  private variable TipsPerSample_1000_4;
  private variable ExtraTips300_3;
  private variable ExtraTips1000_1;
  private variable ExtraTips300_4;
  private variable TipsPerSample_300_1;
  private variable ExtraTips1000_2;
  private variable TipsPerSample_300_2;
  private variable ExtraTips1000_3;
  private variable TipsPerSample_300_3;
  private variable TipsPerSample_300_4;
  private variable ExtraTips1000_4;
  private variable TipsPerSample_50_1;
  private variable TipsPerSample_50_2;
  private variable ExtraTips50_1;
  private variable TipsPerSample_50_3;
  private variable ExtraTips50_2;
  private variable TipsPerSample_50_4;
  private variable PlatesInStack1_1;
  private variable PlatesInStack2_1;
  private variable ExtraTips50_3;
  private variable PlatesInStack1_2;
  private variable PlatesInStack1_3;
  private variable PlatesInStack3_1;
  private variable PlatesInStack2_2;
  private variable ExtraTips50_4;
  private variable PlatesInStack3_2;
  private variable PlatesInStack1_4;
  private variable PlatesInStack2_3;
  private variable PlatesInStack2_4;
  private variable PlatesInStack3_3;
  private variable PlatesInStack3_4;
  private variable TipsPerSample_1000;
  private variable ExtraTips1000;
  private variable PlatesInStack4_1;
  private variable PlatesInStack4_2;
  private variable PlatesInStack4_3;
  private variable PlatesInStack4_4;
  private variable PlatesInStack3_5;
  private variable PlatesInStack2_6;
  private variable PlatesInStack1_7;
  private variable ExtraTips50_8;
  private variable PlatesInStack3_6;
  private variable PlatesInStack1_8;
  private variable PlatesInStack2_7;
  private variable PlatesInStack4_6;
  private variable PlatesInStack2_8;
  private variable PlatesInStack3_7;
  private variable PlatesInStack3_8;
  private variable PlatesInStack4_8;
  private variable TipsPerSample_1000_5;
  private variable TipsPerSample_300_10;
  private variable ExtraTips300_5;
  private variable TipsPerSample_1000_6;
  private variable ExtraTips300_6;
  private variable TipsPerSample_1000_7;
  private variable TipsPerSample_1000_8;
  private variable ExtraTips300_7;
  private variable ExtraTips1000_10;
  private variable TipsPerSample_1000_9;
  private variable ExtraTips300_8;
  private variable TipsPerSample_300_5;
  private variable ExtraTips1000_5;
  private variable ExtraTips300_10;
  private variable ExtraTips300_9;
  private variable ExtraTips1000_6;
  private variable TipsPerSample_300_6;
  private variable TipsPerSample_300_7;
  private variable ExtraTips1000_7;
  private variable ExtraTips1000_8;
  private variable TipsPerSample_300_8;
  private variable ExtraTips1000_9;
  private variable TipsPerSample_300_9;
  private variable TipsPerSample_50_5;
  private variable TipsPerSample_50_10;
  private variable TipsPerSample_50_6;
  private variable TipsPerSample_50_7;
  private variable ExtraTips50_5;
  private variable TipsPerSample_1000_10;
  private variable PlatesInStack1_5;
  private variable ExtraTips50_6;
  private variable TipsPerSample_50_8;
  private variable TipsPerSample_50_9;
  private variable PlatesInStack1_6;
  private variable PlatesInStack2_5;
  private variable ExtraTips50_7;
  private variable PlatesInStack4_5;
  private variable PlatesInStack4_7;
  private variable Vol_RSB8;
  private variable Vol_SMB;
  private variable Vol_AmpBeads8;
  private variable Vol_HP3_5;
  private variable Vol_HP3_6;
  private variable Vol_HP3;
  private variable Vol_EWS_5;
  private variable Vol_EWS_6;
  private variable Vol_EE1_5;
  private variable Vol_EE1_6;
  private variable Vol_CT3_5;
  private variable Vol_EWS;
  private variable Vol_CT3_6;
  private variable Vol_ET2_5;
  private variable Vol_CEX_5;
  private variable Vol_EE1;
  private variable Vol_ET2_6;
  private variable Vol_CEX_6;
  private variable Vol_EtOH80_6;
  private variable Vol_CT3;
  private variable Vol_SMB_5;
  private variable Vol_ET2;
  private variable Vol_CEX;
  private variable Vol_EtOH80_8;
  private variable Vol_RSB6;
  private variable Vol_SMB_6;
  private variable Vol_AmpBeads6;
  private variable Vol_NEM;
  private variable Vol_EWS_mL;
  private variable Vol_SMB_mL;
  private variable Text_Pos3;
  private variable Text_SamplesOrPools;
  private variable Vol_SMB_mL_Tube1;
  private variable Vol_SMB_mL_Tube2;
  private dialog dialogHandle_17;
  private variable Vol_EWS_mL_Tub;
  private variable Vol_EWS_mL_Tube;
  private dialog dialogHandle_18;
  private dialog dialogHandle_19;
  private dialog dialogHandle_20;
  private dialog dialogHandle_21;
  private dialog dialogHandle_22;
  private variable Vol_RSB4;
  private variable ExtraTips50_9;
  private variable ExtraTips50_10;
  MECC::TraceComment(Translate("********** Submethod:  CalculateResources **********"));
  if (AnswerStartPoint == 1)
  {
    RunProcess1 = 1;
    if (AnswerStopPoint >= 2)
    {
      RunProcess2 = 1;
    }
    if (AnswerStopPoint >= 3)
    {
      RunProcess3 = 1;
    }
    if (AnswerStopPoint >= 4)
    {
      dialogHandle_20.SetOutput(Translate("The method assumes that library prep (processes 1-3) will be done on Day 1, and the rest on Day 2 or later."), "\n", Translate(""), "\n", Translate("Please re-select processes accordingly"), "\n", Translate(""), "\n", Translate("Aborting..."));
      dialogHandle_20.ShowOutput(Translate("Exceeded program parameters"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
      abort;
      if(0){
        RunProcess4 = 1;
      }
    }
    if(0){
      if (AnswerStopPoint >= 5)
      {
        RunProcess5 = 1;
      }
      if (AnswerStopPoint >= 6)
      {
        RunProcess6 = 1;
      }
      if (AnswerStopPoint >= 7)
      {
        RunProcess7 = 1;
      }
      if (AnswerStopPoint >= 8)
      {
        RunProcess8 = 1;
      }
      if (AnswerStopPoint >= 9)
      {
        RunProcess9 = 1;
      }
      if (AnswerStopPoint == 10)
      {
        RunProcess_10 = 1;
      }
    }
  }
  if (AnswerStartPoint == 2)
  {
    RunProcess1 = 0;
    RunProcess2 = 1;
    if (AnswerStopPoint >= 3)
    {
      RunProcess3 = 1;
    }
    if (AnswerStopPoint >= 4)
    {
      dialogHandle_21.SetOutput(Translate("The method assumes that library prep (processes 1-3) will be done on Day 1, and the rest on Day 2 or later."), "\n", Translate(""), "\n", Translate("Please re-select processes accordingly"), "\n", Translate(""), "\n", Translate("Aborting..."));
      dialogHandle_21.ShowOutput(Translate("Exceeded program parameters"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
      abort;
      if(0){
        RunProcess4 = 1;
      }
    }
    if(0){
      if (AnswerStopPoint >= 5)
      {
        RunProcess5 = 1;
      }
      if (AnswerStopPoint >= 6)
      {
        RunProcess6 = 1;
      }
      if (AnswerStopPoint >= 7)
      {
        RunProcess7 = 1;
      }
      if (AnswerStopPoint >= 8)
      {
        RunProcess8 = 1;
      }
      if (AnswerStopPoint >= 9)
      {
        RunProcess9 = 1;
      }
      if (AnswerStopPoint == 10)
      {
        RunProcess_10 = 1;
      }
    }
  }
  if (AnswerStartPoint == 3)
  {
    RunProcess1 = 0;
    RunProcess2 = 0;
    RunProcess3 = 1;
    if (AnswerStopPoint >= 4)
    {
      dialogHandle_22.SetOutput(Translate("The method assumes that library prep (processes 1-3) will be done on Day 1, and the rest on Day 2 or later."), "\n", Translate(""), "\n", Translate("Please re-select processes accordingly"), "\n", Translate(""), "\n", Translate("Aborting..."));
      dialogHandle_22.ShowOutput(Translate("Exceeded program parameters"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
      abort;
      if(0){
        RunProcess4 = 1;
      }
    }
    if(0){
      if (AnswerStopPoint >= 5)
      {
        RunProcess5 = 1;
      }
      if (AnswerStopPoint >= 6)
      {
        RunProcess6 = 1;
      }
      if (AnswerStopPoint >= 7)
      {
        RunProcess7 = 1;
      }
      if (AnswerStopPoint >= 8)
      {
        RunProcess8 = 1;
      }
      if (AnswerStopPoint >= 9)
      {
        RunProcess9 = 1;
      }
      if (AnswerStopPoint == 10)
      {
        RunProcess_10 = 1;
      }
    }
  }
  if (AnswerStartPoint == 4)
  {
    RunProcess1 = 0;
    RunProcess2 = 0;
    RunProcess3 = 0;
    RunProcess4 = 1;
    if (AnswerStopPoint >= 5)
    {
      RunProcess5 = 1;
    }
    if (AnswerStopPoint >= 6)
    {
      RunProcess6 = 1;
    }
    if (AnswerStopPoint >= 7)
    {
      RunProcess7 = 1;
    }
    if (AnswerStopPoint >= 8)
    {
      RunProcess8 = 1;
    }
    if (AnswerStopPoint >= 9)
    {
      RunProcess9 = 1;
    }
    if (AnswerStopPoint == 10)
    {
      RunProcess_10 = 1;
    }
  }
  if (AnswerStartPoint == 5)
  {
    RunProcess1 = 0;
    RunProcess2 = 0;
    RunProcess3 = 0;
    RunProcess4 = 0;
    RunProcess5 = 1;
    if (AnswerStopPoint >= 6)
    {
      RunProcess6 = 1;
    }
    if (AnswerStopPoint >= 7)
    {
      RunProcess7 = 1;
    }
    if (AnswerStopPoint >= 8)
    {
      RunProcess8 = 1;
    }
    if (AnswerStopPoint >= 9)
    {
      RunProcess9 = 1;
    }
    if (AnswerStopPoint == 10)
    {
      RunProcess_10 = 1;
    }
  }
  if (AnswerStartPoint == 6)
  {
    RunProcess1 = 0;
    RunProcess2 = 0;
    RunProcess3 = 0;
    RunProcess4 = 0;
    RunProcess5 = 0;
    RunProcess6 = 1;
    if (AnswerStopPoint >= 7)
    {
      RunProcess7 = 1;
    }
    if (AnswerStopPoint >= 8)
    {
      RunProcess8 = 1;
    }
    if (AnswerStopPoint >= 9)
    {
      RunProcess9 = 1;
    }
    if (AnswerStopPoint == 10)
    {
      RunProcess_10 = 1;
    }
  }
  if (AnswerStartPoint == 7)
  {
    RunProcess1 = 0;
    RunProcess2 = 0;
    RunProcess3 = 0;
    RunProcess4 = 0;
    RunProcess5 = 0;
    RunProcess6 = 0;
    RunProcess7 = 1;
    if (AnswerStopPoint >= 8)
    {
      RunProcess8 = 1;
    }
    if (AnswerStopPoint >= 9)
    {
      RunProcess9 = 1;
    }
    if (AnswerStopPoint == 10)
    {
      RunProcess_10 = 1;
    }
  }
  if (AnswerStartPoint == 8)
  {
    RunProcess1 = 0;
    RunProcess2 = 0;
    RunProcess3 = 0;
    RunProcess4 = 0;
    RunProcess4 = 0;
    RunProcess5 = 0;
    RunProcess6 = 0;
    RunProcess7 = 0;
    RunProcess8 = 1;
    if (AnswerStopPoint >= 9)
    {
      RunProcess9 = 1;
    }
    if (AnswerStopPoint == 10)
    {
      RunProcess_10 = 1;
    }
  }
  Trace ("Run Process 1?  (1=Yes, 0=No):  ", RunProcess1);
  Trace ("Run Process 2?  (1=Yes, 0=No):  ", RunProcess2);
  Trace ("Run Process 3?  (1=Yes, 0=No):  ", RunProcess3);
  Trace ("Run Process 4?  (1=Yes, 0=No):  ", RunProcess4);
  Trace ("Run Process 5?  (1=Yes, 0=No):  ", RunProcess5);
  Trace ("Run Process 6?  (1=Yes, 0=No):  ", RunProcess6);
  Trace ("Run Process 7?  (1=Yes, 0=No):  ", RunProcess7);
  Trace ("Run Process 8?  (1=Yes, 0=No):  ", RunProcess8);
  if (AnswerStartPoint == 4)
  {
    NormalizePool_Prep();
  }
  if (RunProcess1 == 1)
  {
    PlatesInStack1_1 = 0;
    PlatesInStack2_1 = 2;
    PlatesInStack3_1 = 0;
    PlatesInStack4_1 = 0;
  }
  if (RunProcess2 == 1)
  {
    PlatesInStack1_2 = 0;
    PlatesInStack2_2 = 0;
    PlatesInStack3_2 = 1;
    PlatesInStack4_2 = 1;
  }
  if (RunProcess3 == 1)
  {
    PlatesInStack1_3 = 0;
    PlatesInStack2_3 = 0;
    PlatesInStack3_3 = 1;
    PlatesInStack4_3 = 1;
  }
  if (RunProcess4 == 1)
  {
    PlatesInStack1_4 = 0;
    PlatesInStack2_4 = 0;
    PlatesInStack3_4 = 0;
    PlatesInStack4_4 = 0;
  }
  if (RunProcess5 == 1)
  {
    PlatesInStack1_5 = 1;
    PlatesInStack2_5 = 0;
    PlatesInStack3_5 = 1;
    PlatesInStack4_5 = 1;
  }
  if (RunProcess6 == 1)
  {
    PlatesInStack1_6 = 2;
    PlatesInStack2_6 = 0;
    if (AnswerStartPoint < 6)
    {
      PlatesInStack3_6 = 0;
    }
    else
    {
      PlatesInStack3_6 = 1;
    }
    PlatesInStack4_6 = 1;
  }
  if (RunProcess7 == 1)
  {
    PlatesInStack1_7 = 0;
    PlatesInStack2_7 = 0;
    PlatesInStack3_7 = 0;
    PlatesInStack4_7 = 0;
  }
  if (RunProcess8 == 1)
  {
    PlatesInStack1_8 = 0;
    PlatesInStack2_8 = 1;
    PlatesInStack3_8 = 0;
    PlatesInStack4_8 = 1;
  }
  PlatesInStack1 = PlatesInStack1_1 + PlatesInStack1_2 + PlatesInStack1_3 + PlatesInStack1_4 + PlatesInStack1_5 + PlatesInStack1_6 + PlatesInStack1_7 + PlatesInStack1_8 ;
  PlatesInStack2 = PlatesInStack2_1 + PlatesInStack2_2 + PlatesInStack2_3 + PlatesInStack2_4 + PlatesInStack2_5 + PlatesInStack2_6 + PlatesInStack2_7 + PlatesInStack2_8 ;
  PlatesInStack3 = PlatesInStack3_1 + PlatesInStack3_2 + PlatesInStack3_3 + PlatesInStack3_4 + PlatesInStack3_5 + PlatesInStack3_6 + PlatesInStack3_7 + PlatesInStack3_8 ;
  PlatesInStack4 = PlatesInStack4_1 + PlatesInStack4_2 + PlatesInStack4_3 + PlatesInStack4_4 + PlatesInStack4_5 + PlatesInStack4_6 + PlatesInStack4_7 + PlatesInStack4_8 ;
  Trace ("Number of plates in Stack 1 required:  ", PlatesInStack1);
  Trace ("Number of plates in Stack 2 required:  ", PlatesInStack2);
  Trace ("Number of plates in Stack 3 required:  ", PlatesInStack3);
  Trace ("Number of plates in Stack 4 required:  ", PlatesInStack4);
  if (PlatesInStack1 < 3)
  {
    StartingPlatePosition = 4 - PlatesInStack1;
    ML_STAR.Stack1.SetCurrentPosition(StartingPlatePosition);
  }
  if (PlatesInStack2 < 3)
  {
    StartingPlatePosition = 4 - PlatesInStack2;
    ML_STAR.Stack2.SetCurrentPosition(StartingPlatePosition);
  }
  if (PlatesInStack3 < 3)
  {
    StartingPlatePosition = 4 - PlatesInStack3;
    ML_STAR.Stack3.SetCurrentPosition(StartingPlatePosition);
  }
  if (PlatesInStack4 < 6)
  {
    StartingPlatePosition = 7 - PlatesInStack4;
    ML_STAR.Stack4.SetCurrentPosition(StartingPlatePosition);
  }
  if (RunProcess1 == 1)
  {
    TipsPerSample_50_1 = 9;
    ExtraTips50_1 = 0;
    if (AnswerFFPE == 3)
    {
      ExtraTips50_1 = Samples_NonFFPE * 1;
    }
    TipsPerSample_300_1 = 3;
    ExtraTips300_1 = 0;
    TipsPerSample_1000_1 = 0;
    ExtraTips1000_1 = 24;
  }
  if (RunProcess2 == 1)
  {
    TipsPerSample_50_2 = 11;
    ExtraTips50_2 = 0;
    TipsPerSample_300_2 = 9;
    ExtraTips300_2 = 0;
    TipsPerSample_1000_2 = 0;
    ExtraTips1000_2 = 32;
  }
  if (RunProcess3 == 1)
  {
    TipsPerSample_50_3 = 6;
    ExtraTips50_3 = 0;
    TipsPerSample_300_3 = 3;
    ExtraTips300_3 = 8;
    TipsPerSample_1000_3 = 0;
    ExtraTips1000_3 = 16;
  }
  if (RunProcess4 == 1)
  {
    TipsPerSample_50_4 = 0;
    ExtraTips50_4 = var_NumSamplesToPool;
    if (var_NumPooledWells < 8)
    {
      ExtraTips50_4 = ExtraTips50_4 + var_NumPooledWells;
    }
    else
    {
      ExtraTips50_4 = ExtraTips50_4 + 8;
    }
    TipsPerSample_300_4 = 0;
    ExtraTips300_4 = 0;
    TipsPerSample_1000_4 = 0;
    ExtraTips1000_4 = 0;
  }
  if (RunProcess5 == 1)
  {
    TipsPerSample_50_5 = 6;
    ExtraTips50_5 = 1;
    TipsPerSample_300_5 = 6;
    ExtraTips300_5 = 0;
    TipsPerSample_1000_5 = 1;
    ExtraTips1000_5 = 4;
  }
  if (RunProcess6 == 1)
  {
    TipsPerSample_50_6 = 10;
    ExtraTips50_6 = 1;
    TipsPerSample_300_6 = 10;
    ExtraTips300_6 = 0;
    TipsPerSample_1000_6 = 1;
    ExtraTips1000_6 = 20;
  }
  if (RunProcess7 == 1)
  {
    TipsPerSample_50_7 = 2;
    ExtraTips50_7 = 0;
    TipsPerSample_300_7 = 0;
    ExtraTips300_7 = 0;
    TipsPerSample_1000_7 = 0;
    ExtraTips1000_7 = 0;
  }
  if (RunProcess8 == 1)
  {
    TipsPerSample_50_8 = 4;
    ExtraTips50_8 = 0;
    TipsPerSample_300_8 = 4;
    ExtraTips300_8 = 0;
    TipsPerSample_1000_8 = 0;
    ExtraTips1000_8 = NumberOfSamples * 2;
    if (ExtraTips1000_8 > 16)
    {
      ExtraTips1000_8 = 16;
    }
  }
  TipsPerSample_50   = TipsPerSample_50_1   + TipsPerSample_50_2   + TipsPerSample_50_3   + TipsPerSample_50_4   + TipsPerSample_50_5   + TipsPerSample_50_6   + TipsPerSample_50_7   + TipsPerSample_50_8   + TipsPerSample_50_9   + TipsPerSample_50_10;
  TipsPerSample_300  = TipsPerSample_300_1  + TipsPerSample_300_2  + TipsPerSample_300_3  + TipsPerSample_300_4  + TipsPerSample_300_5  + TipsPerSample_300_6  + TipsPerSample_300_7  + TipsPerSample_300_8  + TipsPerSample_300_9  + TipsPerSample_300_10;
  TipsPerSample_1000 = TipsPerSample_1000_1 + TipsPerSample_1000_2 + TipsPerSample_1000_3 + TipsPerSample_1000_4 + TipsPerSample_1000_5 + TipsPerSample_1000_6 + TipsPerSample_1000_7 + TipsPerSample_1000_8 + TipsPerSample_1000_9 + TipsPerSample_1000_10;
  ExtraTips50  = ExtraTips50_1 + ExtraTips50_2 +  ExtraTips50_3 + ExtraTips50_4 + ExtraTips50_5 + ExtraTips50_6 +  ExtraTips50_7 + ExtraTips50_8 +  ExtraTips50_9 + ExtraTips50_10;
  ExtraTips300  = ExtraTips300_1 + ExtraTips300_2 +  ExtraTips300_3 + ExtraTips300_4 + ExtraTips300_5 + ExtraTips300_6 +  ExtraTips300_7 + ExtraTips300_8 +  ExtraTips300_9 + ExtraTips300_10;
  ExtraTips1000 = ExtraTips1000_1 + ExtraTips1000_2 + ExtraTips1000_3 + ExtraTips1000_4 + ExtraTips1000_5 + ExtraTips1000_6 + ExtraTips1000_7 + ExtraTips1000_8 + ExtraTips1000_9 + ExtraTips1000_10;
  Number50Tips = NumberOfSamples * TipsPerSample_50;
  Number50Tips = Number50Tips + ExtraTips50;
  Number300Tips = NumberOfSamples * TipsPerSample_300;
  Number300Tips = Number300Tips + ExtraTips300;
  Number1000Tips = NumberOfSamples * TipsPerSample_1000;
  Number1000Tips = Number1000Tips + ExtraTips1000;
  if (NumberOfSamples > 48)
  {
    Number1000Tips = Number1000Tips + 1;
  }
  Trace ("Number of 50ul tips required:  ", Number50Tips);
  Trace ("Number of 300ul tips required:  ", Number300Tips);
  Trace ("Number of 1000ul tips required:  ", Number1000Tips);
  RacksOf50s = Number50Tips / (96 * 1.0);
  RacksOf50s = MthRound(RacksOf50s, 1);
  RacksOf300s = Number300Tips / (96 * 1.0);
  RacksOf300s = MthRound(RacksOf300s, 1);
  if (RunProcess2 == 1)
  {
    if (AnswerAdapterLabware == 1)
    {
      Text_Pos3 = Translate("RAP Plate");
    }
    else
    {
      Text_Pos3 = Translate("Empty");
    }
  }
  else
  {
    Text_Pos3 = Translate("Empty");
  }
  if (AnswerStartPoint == 1)
  {
    if (AnswerFFPE == 1)
    {
      Text_Pos3 = Translate("Empty");
      Text_Pos4 = Translate("DFP Plate (FFPE)");
    }
    if (AnswerFFPE == 2)
    {
      Text_Pos3 = Translate("Empty");
      Text_Pos4 = Translate("DFP Plate (non-FFPE)");
    }
    if (AnswerFFPE == 3)
    {
      Text_Pos3 = Translate("DFP Plate (non-FFPE)");
      Text_Pos4 = Translate("DFP Plate (FFPE)");
    }
    Text_Pos5 = Translate("Empty");
  }
  if (AnswerStartPoint == 2)
  {
    Text_Pos4 = Translate("Empty");
    Text_Pos5 = Translate("CCP Plate");
  }
  if (AnswerStartPoint == 3)
  {
    Text_Pos4 = Translate("PCR Plate");
    Text_Pos5 = Translate("Empty");
  }
  if (AnswerStartPoint == 4)
  {
    Text_Pos3 = Translate("RAH1 plate (empty)");
    Text_Pos4 = Translate("TSP1 Plate (with sample)");
    Text_Pos5 = Translate("Empty");
  }
  if (AnswerStartPoint == 5)
  {
    Text_Pos3 = Translate("RAH1 plate (with 45uL pooled sample)");
    Text_Pos4 = Translate("Empty");
    Text_Pos5 = Translate("Empty");
  }
  if (AnswerStartPoint == 6)
  {
    Text_Pos3 = Translate("RAH2 Plate");
    Text_Pos4 = Translate("Empty");
    Text_Pos5 = Translate("Empty");
  }
  if (AnswerStartPoint == 7)
  {
    Text_Pos4 = Translate("RAA Plate");
    Text_Pos5 = Translate("Empty");
  }
  if (AnswerStartPoint == 8)
  {
    Text_Pos4 = Translate("RAL Plate");
    Text_Pos5 = Translate("Empty");
  }
  if (AnswerStartPoint <= 3)
  {
    Text_SamplesOrPools = Translate("Number of Samples Expected:");
  }
  else
  {
    Text_SamplesOrPools = Translate("Number of Pooled Wells Expected:");
  }
  if (AnswerStartPoint == 1)
  {
    if (AnswerFFPE == 3)
    {
      PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,3_PCR96,4_PCR96");
    }
    else
    {
      PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,4_PCR96");
    }
    if (NumberOfSamples <= 48)
    {
      VialCarBCsToCheck_Rgts = Translate("5,7,11,");
    }
    else
    {
      VialCarBCsToCheck_Rgts = "5,6,7,8,11,12,";
    }
    if (RunProcess2 == 1)
    {
      if (NumberOfSamples <= 48)
      {
        VialCarBCsToCheck_Rgts = VialCarBCsToCheck_Rgts + "15,19,21,";
      }
      else
      {
        VialCarBCsToCheck_Rgts = VialCarBCsToCheck_Rgts + "15,16,19,20,21,22,";
      }
    }
    if (RunProcess3 == 1)
    {
      if (NumberOfSamples <= 48)
      {
        VialCarBCsToCheck_Rgts = VialCarBCsToCheck_Rgts + "23,25,";
      }
      else
      {
        VialCarBCsToCheck_Rgts = VialCarBCsToCheck_Rgts + "23,24,25,26,";
      }
    }
    if (RunProcess2 == 1)
    {
      if (AnswerAdapterLabware == 1)
      {
        PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,3_PCR96,4_PCR96");
      }
      else
      {
        PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,4_PCR96");
      }
    }
    else
    {
      if (AnswerFFPE == 3)
      {
        PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,3_PCR96,4_PCR96");
      }
      else
      {
        PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,4_PCR96");
      }
    }
  }
  if (AnswerStartPoint == 2)
  {
    if (NumberOfSamples <= 48)
    {
      VialCarBCsToCheck_Rgts = "" + "15,19,21,";
    }
    else
    {
      VialCarBCsToCheck_Rgts = "" + "15,16,19,20,21,22,";
    }
    if (RunProcess3 == 1)
    {
      if (NumberOfSamples <= 48)
      {
        VialCarBCsToCheck_Rgts = VialCarBCsToCheck_Rgts + "23,25,";
      }
      else
      {
        VialCarBCsToCheck_Rgts = VialCarBCsToCheck_Rgts + "23,24,25,26,";
      }
    }
    if (AnswerAdapterLabware == 1)
    {
      PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,3_PCR96,5_MIDI");
    }
    else
    {
      PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,5_MIDI");
    }
  }
  if (AnswerStartPoint == 3)
  {
    PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,4_PCR96");
    if (NumberOfSamples <= 48)
    {
      VialCarBCsToCheck_Rgts = "" + "23,25";
    }
    else
    {
      VialCarBCsToCheck_Rgts = "" + "23,24,25,26";
    }
  }
  if (AnswerStartPoint == 4)
  {
    if (RunProcess5 == 1)
    {
      VialCarBCsToCheck_Rgts = Translate("9,13,27,30,32,");
    }
    if (RunProcess7 == 1)
    {
      VialCarBCsToCheck_Rgts = Translate("9,10,13,23,27,30,32,");
    }
    PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,3_PCR96,4_PCR96");
  }
  if (AnswerStartPoint == 5)
  {
    VialCarBCsToCheck_Rgts = Translate("9,13,27,30,32,");
    PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,3_PCR96");
    if (RunProcess7 == 1)
    {
      VialCarBCsToCheck_Rgts = Translate("9,10,13,23,27,30,32,");
    }
  }
  if (AnswerStartPoint == 6)
  {
    VialCarBCsToCheck_Rgts = Translate("9,13,27,30,32,");
    PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,3_PCR96");
    if (RunProcess7 == 1)
    {
      VialCarBCsToCheck_Rgts = Translate("9,10,13,23,27,30,32,");
    }
  }
  if (AnswerStartPoint == 7)
  {
    VialCarBCsToCheck_Rgts = Translate("10,23");
    PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,4_PCR96");
  }
  if (AnswerStartPoint == 8)
  {
    VialCarBCsToCheck_Rgts = Translate("");
    PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,4_PCR96");
  }
  AdapterBCsToRead = Translate("");
  if (RunProcess2 == 1)
  {
    if (AnswerAdapterLabware == 2)
    {
      MECC::TraceComment(Translate("****** Determine which adapter barcodes to look for during loading ....."));
      arr_Compare.SetSize(0);
      {
        for(loopCounter2 = 0; loopCounter2 < NumberOfSamples;)
        {
          loopCounter2 = loopCounter2 + 1;
          Index1=array_Index1Positions.GetAt(loopCounter2-1);
          FoundIndex = 0;
          RecordsToCheck=arr_Compare.GetSize();
          {
            for(loopCounter3 = 0; loopCounter3 < RecordsToCheck;)
            {
              loopCounter3 = loopCounter3 + 1;
              Index1_loopCounter3=arr_Compare.GetAt(loopCounter3-1);
              if (Index1 == Index1_loopCounter3)
              {
                FoundIndex = 1;
                break;
              }
            }
          }
          if (FoundIndex == 0)
          {
            AdapterBCsToRead = AdapterBCsToRead + Index1;
            AdapterBCsToRead = AdapterBCsToRead + Translate(",");
            arr_Compare.AddAsLast(Index1);
          }
        }
      }
      if (NumberOfIndexes == 2)
      {
        {
          for(loopCounter1 = 0; loopCounter1 < NumberOfSamples;)
          {
            loopCounter1 = loopCounter1 + 1;
            Index2=array_Index2Positions.GetAt(loopCounter2-1);
            FoundIndex = 0;
            RecordsToCheck=arr_Compare.GetSize();
            {
              for(loopCounter3 = 0; loopCounter3 < RecordsToCheck;)
              {
                loopCounter3 = loopCounter3 + 1;
                Index2_loopCounter3=arr_Compare.GetAt(loopCounter3-1);
                if (Index2 == Index2_loopCounter3)
                {
                  FoundIndex = 1;
                  break;
                }
              }
            }
            if (FoundIndex == 0)
            {
              AdapterBCsToRead = AdapterBCsToRead + Index2;
              AdapterBCsToRead = AdapterBCsToRead + Translate(",");
              arr_Compare.AddAsLast(Index2);
            }
          }
        }
      }
      Trace (AdapterBCsToRead);
    }
  }
  SamplesMoreThan48 = NumberOfSamples - 48;
  TrackingEthanolVolume_80 = 0;
  if (RunProcess1 == 1)
  {
    if (NumberOfSamples <= 48)
    {
      Vol_EPH = NumberOfSamples * 8.6;
      Vol_EPH = Vol_EPH + 25;
      Vol_EPH2 = 0;
      Vol_FSA = NumberOfSamples * 8.4;
      Vol_FSA = Vol_FSA + 56;
      Vol_FSA2 = 0;
      Vol_SMM = NumberOfSamples * 20.8;
      Vol_SMM = Vol_SMM + 60;
      Vol_SMM2 = 0;
    }
    else
    {
      Vol_EPH = Translate("Full");
      if (NumberOfSamples == 96)
      {
        Vol_EPH2 = Translate("Full");
      }
      else
      {
        Vol_EPH2 = SamplesMoreThan48 * 8.6;
        Vol_EPH2 = Vol_EPH2 + 25;
      }
      Vol_FSA = Translate("Full");
      if (NumberOfSamples == 96)
      {
        Vol_FSA2 = Translate("Full");
      }
      else
      {
        Vol_FSA2 = SamplesMoreThan48 * 8.4;
        Vol_FSA2 = Vol_FSA2 + 56;
      }
      Vol_SMM = Translate("Full");
      if (NumberOfSamples == 96)
      {
        Vol_SMM2 = Translate("Full");
      }
      else
      {
        Vol_SMM2 = SamplesMoreThan48 * 20.8;
        Vol_SMM2 = Vol_SMM2 + 60;
      }
    }
    Vol_AmpBeads1 = NumberOfSamples * 90;
    Vol_EtOH80_1 = NumberOfSamples * 408;
    Vol_RSB1 = NumberOfSamples * 22.5;
    Vol_Oil_mL = 0.01 * NumberOfSamples;
    Vol_Oil_mL = Vol_Oil_mL + 1;
    Vol_Oil_mL = MthCeiling(Vol_Oil_mL);
  }
  if (RunProcess2 == 1)
  {
    if (NumberOfSamples <= 48)
    {
      Vol_ATL = NumberOfSamples * 12.8;
      Vol_ATL = Vol_ATL + 55;
      Vol_ATL2 = 0;
      Vol_LIG = NumberOfSamples * 3.1;
      Vol_LIG = Vol_LIG + 45;
      Vol_LIG2 = 0;
      Vol_STL = NumberOfSamples * 5.2;
      Vol_STL = Vol_STL + 20;
      Vol_STL2 = 0;
    }
    else
    {
      Vol_ATL = Translate("Full");
      if (NumberOfSamples == 96)
      {
        Vol_ATL2 = Translate("Full");
      }
      else
      {
        Vol_ATL2 = SamplesMoreThan48 * 12.8;
        Vol_ATL2 = Vol_ATL2 + 55;
      }
      Vol_LIG = Translate("Full");
      if (NumberOfSamples == 96)
      {
        Vol_LIG2 = Translate("Full");
      }
      else
      {
        Vol_LIG2 = SamplesMoreThan48 * 3.1;
        Vol_LIG2 = Vol_LIG2 + 45;
      }
      Vol_STL = Translate("Full");
      if (NumberOfSamples == 96)
      {
        Vol_STL2 = Translate("Full");
      }
      else
      {
        Vol_STL2 = SamplesMoreThan48 * 5.2;
        Vol_STL2 = Vol_STL2 + 20;
      }
    }
    Vol_AmpBeads2 = NumberOfSamples * 92;
    Vol_EtOH80_2 = NumberOfSamples * 816;
    Vol_RSB2 = NumberOfSamples * 77.5;
  }
  if (RunProcess3 == 1)
  {
    if (NumberOfSamples <= 48)
    {
      Vol_PPC = NumberOfSamples * 5.2;
      Vol_PPC = Vol_PPC + 50;
      Vol_PPC2 = 0;
      Vol_PMM = NumberOfSamples * 26.1;
      Vol_PMM = Vol_PMM + 45;
      Vol_PMM2 = 0;
    }
    else
    {
      Vol_PPC = Translate("Full");
      if (NumberOfSamples == 96)
      {
        Vol_PPC2 = Translate("Full");
      }
      else
      {
        Vol_PPC2 = SamplesMoreThan48 * 5.2;
        Vol_PPC2 = Vol_PPC2 + 50;
      }
      Vol_PMM = Translate("Full");
      if (NumberOfSamples == 96)
      {
        Vol_PMM2 = Translate("Full");
      }
      else
      {
        Vol_PMM2 = SamplesMoreThan48 * 26.1;
        Vol_PMM2 = Vol_PMM2 + 45;
      }
    }
    Vol_AmpBeads3 = NumberOfSamples * VolumeAmpureBeadsForCleanupPCR;
    Vol_EtOH80_3 = NumberOfSamples * 408;
    Vol_RSB3 = NumberOfSamples * 32.5;
  }
  if (RunProcess4 == 1)
  {
    Vol_RSB4 = var_Pool_TotalBufferVol;
  }
  if (RunProcess5 == 1)
  {
    Vol_CT3_5 = NumberOfSamples * 50;
    Vol_CEX_5 = NumberOfSamples * 5;
    Vol_SMB_5 = NumberOfSamples * 250;
    Vol_EWS_5 = NumberOfSamples * 400;
    Vol_EE1_5 = NumberOfSamples * 28.5;
    Vol_HP3_5 = NumberOfSamples * 1.5;
    Vol_ET2_5 = NumberOfSamples * 4;
  }
  if (RunProcess6 == 1)
  {
    Vol_CT3_6 = NumberOfSamples * 50;
    Vol_CEX_6 = NumberOfSamples * 5;
    Vol_SMB_6 = NumberOfSamples * 250;
    Vol_EWS_6 = NumberOfSamples * 400;
    Vol_EE1_6 = NumberOfSamples * 28.5;
    Vol_HP3_6 = NumberOfSamples * 1.5;
    Vol_ET2_6 = NumberOfSamples * 4;
    Vol_RSB6 = NumberOfSamples * 47.5;
    Vol_AmpBeads6 = NumberOfSamples * 45;
    Vol_EtOH80_6 = NumberOfSamples * 400;
  }
  if (RunProcess7 == 1)
  {
    Vol_PPC = NumberOfSamples * 5.2;
    Vol_PPC = Vol_PPC + 50;
    Vol_NEM = NumberOfSamples * 20;
    Vol_NEM = Vol_NEM + 50;
  }
  if (RunProcess8 == 1)
  {
    Vol_RSB8 = NumberOfSamples * 32;
    Vol_AmpBeads8 = NumberOfSamples * 90;
    Vol_EtOH80_8 = NumberOfSamples * 400;
  }
  if (AnswerStartPoint < 4)
  {
    Vol_AmpBeads = Vol_AmpBeads1 + Vol_AmpBeads2;
    Vol_AmpBeads = Vol_AmpBeads + Vol_AmpBeads3;
    if (Vol_AmpBeads > 0)
    {
      Vol_AmpBeads_mL = Vol_AmpBeads / 1000;
      Vol_AmpBeads_mL = Vol_AmpBeads_mL + 3;
      Vol_AmpBeads_mL = MthCeiling(Vol_AmpBeads_mL);
      if (NumberOfSamples >= 88)
      {
        Vol_AmpBeads_mL = Vol_AmpBeads_mL + 1;
      }
    }
    Vol_EtOH80 = Vol_EtOH80_1 + Vol_EtOH80_2;
    Vol_EtOH80 = Vol_EtOH80 + Vol_EtOH80_3;
    if (Vol_EtOH80 > 0)
    {
      Vol_EtOH80_mL = Vol_EtOH80 / 1000;
      Trace ("Volume (mL) 80% Ethanol required:  ", Vol_EtOH80_mL);
      if (Vol_EtOH80_mL <= 54)
      {
        MECC::TraceComment(Translate("***** Only need 1 tub of 80% ethanol"));
        EtOH80_TubsRequired = 1;
        Vol_EtOH80_mL_Tub1 = Vol_EtOH80_mL;
      }
      else
      {
        MECC::TraceComment(Translate("***** Need 2 tubs of 80% ethanol"));
        EtOH80_TubsRequired = 2;
        Vol_EtOH80_mL_Tub1 = 54;
        Vol_EtOH80_mL_Tub2 = Vol_EtOH80_mL - 54;
      }
      if (Vol_EtOH80_mL > 108)
      {
        MECC::TraceComment(Translate("***** Need 3 tubs of 80% ethanol"));
        EtOH80_TubsRequired = 3;
        Vol_EtOH80_mL_Tub2 = 54;
        Vol_EtOH80_mL_Tub3 = Vol_EtOH80_mL - 108;
      }
      Vol_EtOH80_mL_Tub1 = Vol_EtOH80_mL_Tub1 + 6;
      if (EtOH80_TubsRequired >= 2)
      {
        Vol_EtOH80_mL_Tub2 = Vol_EtOH80_mL_Tub2 + 6;
      }
      if (EtOH80_TubsRequired == 3)
      {
        Vol_EtOH80_mL_Tub3 = Vol_EtOH80_mL_Tub3 + 20;
      }
      Trace ("80% ethanol in tub 1:  ", Vol_EtOH80_mL_Tub1);
      Trace ("80% ethanol in tub 2:  ", Vol_EtOH80_mL_Tub2);
      Trace ("80% ethanol in tub 3:  ", Vol_EtOH80_mL_Tub3);
    }
    Vol_RSB = 0;
    Vol_RSB = Vol_RSB1 + Vol_RSB2 + Vol_RSB3;
    if (Vol_RSB > 0)
    {
      Vol_RSB_mL = Vol_RSB / 1000;
      Vol_RSB_mL = Vol_RSB_mL + 3;
      Vol_RSB_mL = MthCeiling(Vol_RSB_mL);
    }
  }
  else
  {
    Vol_AmpBeads = Vol_AmpBeads6 + Vol_AmpBeads8;
    if (Vol_AmpBeads > 0)
    {
      Vol_AmpBeads_mL = Vol_AmpBeads / 1000;
      Vol_AmpBeads_mL = Vol_AmpBeads_mL + 3;
      Vol_AmpBeads_mL = MthCeiling(Vol_AmpBeads_mL);
      if (NumberOfSamples >= 88)
      {
        Vol_AmpBeads_mL = Vol_AmpBeads_mL + 1;
      }
    }
    Vol_EtOH80 = Vol_EtOH80_6 + Vol_EtOH80_8;
    if (Vol_EtOH80 > 0)
    {
      Vol_EtOH80_mL = Vol_EtOH80 / 1000;
      Trace ("Volume (mL) 80% Ethanol required:  ", Vol_EtOH80_mL);
      if (Vol_EtOH80_mL <= 54)
      {
        MECC::TraceComment(Translate("***** Only need 1 tub of 80% ethanol"));
        EtOH80_TubsRequired = 1;
        Vol_EtOH80_mL_Tub1 = Vol_EtOH80_mL;
      }
      else
      {
        MECC::TraceComment(Translate("***** Need 2 tubs of 80% ethanol"));
        EtOH80_TubsRequired = 2;
        Vol_EtOH80_mL_Tub1 = 54;
        Vol_EtOH80_mL_Tub2 = Vol_EtOH80_mL - 54;
      }
      if (Vol_EtOH80_mL > 108)
      {
        MECC::TraceComment(Translate("***** Need 3 tubs of 80% ethanol"));
        EtOH80_TubsRequired = 3;
        Vol_EtOH80_mL_Tub2 = 54;
        Vol_EtOH80_mL_Tub3 = Vol_EtOH80_mL - 108;
      }
      Vol_EtOH80_mL_Tub1 = Vol_EtOH80_mL_Tub1 + 6;
      if (EtOH80_TubsRequired >= 2)
      {
        Vol_EtOH80_mL_Tub2 = Vol_EtOH80_mL_Tub2 + 6;
      }
      if (EtOH80_TubsRequired == 3)
      {
        Vol_EtOH80_mL_Tub3 = Vol_EtOH80_mL_Tub3 + 20;
      }
      Trace ("80% ethanol in tub 1:  ", Vol_EtOH80_mL_Tub1);
      Trace ("80% ethanol in tub 2:  ", Vol_EtOH80_mL_Tub2);
      Trace ("80% ethanol in tub 3:  ", Vol_EtOH80_mL_Tub3);
    }
    Vol_RSB = 0;
    Vol_RSB = Vol_RSB4 + Vol_RSB6 + Vol_RSB8;
    if (Vol_RSB > 0)
    {
      Vol_RSB_mL = Vol_RSB / 1000;
      Vol_RSB_mL = Vol_RSB_mL + 3;
      Vol_RSB_mL = MthCeiling(Vol_RSB_mL);
    }
    Vol_CT3 = Vol_CT3_5 + Vol_CT3_6;
    if (Vol_CT3 > 0)
    {
      Vol_CT3 = Vol_CT3 + 50;
    }
    Vol_CEX = Vol_CEX_5 + Vol_CEX_6;
    if (Vol_CEX > 0)
    {
      Vol_CEX = Vol_CEX + 50;
    }
    Vol_SMB = Vol_SMB_5 + Vol_SMB_6;
    if (Vol_SMB > 0)
    {
      Vol_SMB = Vol_SMB + 500;
    }
    Vol_SMB_mL = Vol_SMB / (1000 * 1.0);
    Vol_SMB_mL = MthRound(Vol_SMB_mL, 1);
    if (Vol_SMB_mL <= 8)
    {
      if (Vol_SMB_mL > 4)
      {
        Vol_SMB_mL_Tube1 = 4;
        Vol_SMB_mL_Tube2 = Vol_SMB_mL - Vol_SMB_mL_Tube1;
        Vol_SMB_mL_Tube2 = Vol_SMB_mL_Tube2 + 0.5;
        Vol_SMB_mL_Tube2 = MthRound(Vol_SMB_mL_Tube2, 1);
        Vol_SMB_mL = Vol_SMB_mL + 0.5;
      }
      else
      {
        Vol_SMB_mL_Tube1 = Vol_SMB_mL;
        Vol_SMB_mL_Tube2 = 0;
      }
    }
    else
    {
      dialogHandle_17.SetOutput(Translate("The total volume of SMB exceeds 8mL (2 tubes x 4mL)"), "\n", Translate(""), "\n", Translate("Please run Processes 5 and 6 separately to proceed"), "\n", Translate(""), "\n", Translate("Aborting..."));
      dialogHandle_17.ShowOutput(Translate("Exceeded reagent capacity!!"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
      abort;
    }
    if (RunProcess5 == 1)
    {
      if (RunProcess6 == 1)
      {
        if (Vol_SMB_mL > 4)
        {
          dialogHandle_18.SetOutput(Translate("The total volume of SMB exceeds 4mL (maximum fill for one SMB supply tube)"), "\n", Translate(""), "\n", Translate("Please run Processes 5 and 6 separately to proceed"), "\n", Translate(""), "\n", Translate("Aborting..."));
          dialogHandle_18.ShowOutput(Translate("Exceeded reccomended reagent capacity!!"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
          abort;
        }
      }
    }
    Vol_EWS = Vol_EWS_5 + Vol_EWS_6;
    if (Vol_EWS > 0)
    {
      Vol_EWS = Vol_EWS + 500;
    }
    Vol_EWS_mL = Vol_EWS / (1000 * 1.0);
    Vol_EWS_mL = MthCeiling(Vol_EWS_mL);
    if (Vol_EWS_mL <= 8)
    {
      Vol_EWS_mL_Tube = Vol_EWS_mL;
      Vol_EWS_mL_Tub = 0;
    }
    else
    {
      Vol_EWS_mL_Tube = 0;
      Vol_EWS_mL_Tub = Vol_EWS_mL + 2;
    }
    if (RunProcess5 == 1)
    {
      if (RunProcess6 == 1)
      {
        if (Vol_EWS_mL > 8)
        {
          dialogHandle_19.SetOutput(Translate("The total volume of EWS exceeds 8mL (maximum fill for one EWS supply tube)"), "\n", Translate(""), "\n", Translate("Please run Processes 5 and 6 separately to proceed"), "\n", Translate(""), "\n", Translate("Aborting..."));
          dialogHandle_19.ShowOutput(Translate("Exceeded reccomended reagent capacity!!"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
          abort;
        }
      }
    }
    Vol_EE1 = Vol_EE1_5 + Vol_EE1_6;
    if (Vol_EE1 > 0)
    {
      Vol_EE1 = Vol_EE1 + 50;
    }
    Vol_HP3 = Vol_HP3_5 + Vol_HP3_6;
    if (Vol_HP3 > 0)
    {
      Vol_HP3 = Vol_HP3 + 50;
    }
    Vol_ET2 = Vol_ET2_5 + Vol_ET2_6;
    if (Vol_ET2 > 0)
    {
      Vol_ET2 = Vol_ET2 + 50;
    }
  }
  customDialog_16.InitCustomDialog("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");
  customDialog_16.SetCustomDialogProperty( "textBlock5.Text", PlatesInStack1 );
  customDialog_16.SetCustomDialogProperty( "textBlock6.Text", PlatesInStack2 );
  customDialog_16.SetCustomDialogProperty( "textBlock7.Text", PlatesInStack3 );
  customDialog_16.SetCustomDialogProperty( "textBlock8.Text", PlatesInStack4 );
  customDialog_16.SetCustomDialogProperty( "textBlock12.Text", Number50Tips );
  customDialog_16.SetCustomDialogProperty( "textBlock13.Text", RacksOf50s );
  customDialog_16.SetCustomDialogProperty( "textBlock16.Text", Number300Tips );
  customDialog_16.SetCustomDialogProperty( "textBlock17.Text", RacksOf300s );
  customDialog_16.SetCustomDialogProperty( "textBlock25.Text", Vol_Oil_mL );
  customDialog_16.SetCustomDialogProperty( "textBlock32.Text", Vol_RSB_mL );
  customDialog_16.SetCustomDialogProperty( "textBlock33.Text", Vol_EtOH80_mL_Tub1 );
  customDialog_16.SetCustomDialogProperty( "textBlock34.Text", Vol_EtOH80_mL_Tub2 );
  customDialog_16.SetCustomDialogProperty( "textBlock35.Text", Vol_EtOH80_mL_Tub3 );
  customDialog_16.SetCustomDialogProperty( "textBlock36.Text", Vol_AmpBeads_mL );
  customDialog_16.SetCustomDialogProperty( "textBlock41.Text", Vol_EWS_mL_Tube );
  customDialog_16.SetCustomDialogProperty( "textBlock42.Text", Vol_SMB_mL_Tube1 );
  customDialog_16.SetCustomDialogProperty( "textBlock48.Text", Number1000Tips );
  customDialog_16.SetCustomDialogProperty( "textBlock52.Text", Text_Pos3 );
  customDialog_16.SetCustomDialogProperty( "textBlock53.Text", Text_Pos4 );
  customDialog_16.SetCustomDialogProperty( "textBlock54.Text", Text_Pos5 );
  customDialog_16.SetCustomDialogProperty( "textBlock83.Text", Vol_SMM );
  customDialog_16.SetCustomDialogProperty( "textBlock84.Text", Vol_SMM2 );
  customDialog_16.SetCustomDialogProperty( "textBlock87.Text", Vol_ATL );
  customDialog_16.SetCustomDialogProperty( "textBlock88.Text", Vol_ATL2 );
  customDialog_16.SetCustomDialogProperty( "textBlock91.Text", Vol_LIG );
  customDialog_16.SetCustomDialogProperty( "textBlock92.Text", Vol_LIG2 );
  customDialog_16.SetCustomDialogProperty( "textBlock93.Text", Vol_STL );
  customDialog_16.SetCustomDialogProperty( "textBlock94.Text", Vol_STL2 );
  customDialog_16.SetCustomDialogProperty( "textBlock95.Text", Vol_PPC );
  customDialog_16.SetCustomDialogProperty( "textBlock96.Text", Vol_PPC2 );
  customDialog_16.SetCustomDialogProperty( "textBlock97.Text", Vol_PMM );
  customDialog_16.SetCustomDialogProperty( "textBlock98.Text", Vol_PMM2 );
  customDialog_16.SetCustomDialogProperty( "textBlock101.Text", Vol_EPH );
  customDialog_16.SetCustomDialogProperty( "textBlock102.Text", Vol_EPH2 );
  customDialog_16.SetCustomDialogProperty( "textBlock103.Text", Vol_FSA2 );
  customDialog_16.SetCustomDialogProperty( "textBlock104.Text", Vol_FSA );
  customDialog_16.SetCustomDialogProperty( "textBlock105.Text", Text_SamplesOrPools );
  customDialog_16.SetCustomDialogProperty( "textBlock109.Text", NumberOfSamples );
  customDialog_16.SetCustomDialogProperty( "textBlock89.Text", Vol_CEX );
  customDialog_16.SetCustomDialogProperty( "textBlock100.Text", Vol_EE1 );
  customDialog_16.SetCustomDialogProperty( "textBlock107.Text", Vol_ET2 );
  customDialog_16.SetCustomDialogProperty( "textBlock108.Text", Vol_CT3 );
  customDialog_16.SetCustomDialogProperty( "textBlock110.Text", Vol_NEM );
  customDialog_16.SetCustomDialogProperty( "textBlock111.Text", Vol_HP3 );
  customDialog_16.SetCustomDialogProperty( "textBlock43.Text", Vol_SMB_mL_Tube2 );
  customDialog_16.SetCustomDialogProperty( "textBlock44.Text", Vol_EWS_mL_Tub );
  customDialog_16.ShowCustomDialog();
  MECC::TraceComment(Translate("********** Submethod Complete:  CalculateResources **********"));
}

private function Process5_HybCapture1(  ) void {
  private variable loopCounter1;
  private timer WaitForMagnet;
  private timer RNA_HYB;
  private variable Vol_RSB_mL;
  private variable Vol_EWS_mL;
  private variable Vol_SMB;
  private variable Vol_EWS;
  private variable Vol_SMB_mL;
  private variable Vol_RSB6;
  private variable Vol_SMB_mL_Tube1;
  private variable Vol_SMB_mL_Tube2;
  private variable Vol_EWS_mL_Tub;
  private variable Vol_EWS_mL_Tube;
  private dialog dialogHandle_23;
  private dialog dialogHandle_24;
  private dialog dialogHandle_25;
  private dialog dialogHandle_26;
  private dialog dialogHandle_27;
  private dialog dialogHandle_28;
  private dialog dialogHandle_29;
  private timer Incubate_RAW1_RT;
  private variable NumberOfTipsRequired;
  MECC::TraceComment(Translate("*******************************************************************************************************************\n********* SUBMETHOD START:  PROCESS 5 - HYBRIDIZATION 1 AND CAPTURE 1 ************\n*******************************************************************************************************************"));
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(Translate("TruSeq RNA Access Library Preparation"));
  AswStatusDialog::SetStatusText(Translate("Process 5:  Hybridization 1"));
  NumberOfTipsRequired = NumberOfSamples * 2;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the RAH1 plate..............\n****************************************************************"));
  AswStatusDialog::AppendText(Translate("   Moving RAH1 to shaker..."));
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_Pipette2, ML_STAR.HSP_HHS3, 0, 1, GripperMode, GripperSequence);
  MECC::TraceComment(Translate("************* Now pipetting CT3 .............."));
  AswStatusDialog::AppendText(Translate("   Adding CT3..."));
  TRUSEQPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR._CTB3, ML_STAR.HSP_HHS3, ML_STAR.MlStar50ulTipWithFilter, 50, Translate("Nextera_CTB3_50F_SurfaceEmpty"), 5);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now pipetting CEX (Coding Exome Oligos) .............."));
  AswStatusDialog::AppendText(Translate("   Adding CEX..."));
  NEXTERAPROCESSES::Add_ReagentFromHalfHeightVial(ML_STAR, NumberOfSamples, ML_STAR._CEX_EEX, ML_STAR.HSP_HHS3, ML_STAR.MlStar50ulTipWithFilter, 5, Translate("Nextera_CEX_DEX_50F_SurfaceEmpty"), 5);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Shaking .............."));
  AswStatusDialog::AppendText(Translate("   Shaking..."));
  TRUSEQPREP::Shake(HHS3, 1200, 60);
  MECC::TraceComment(Translate("************* Now move RAH1 to Plate-Tip Carrier .............."));
  AswStatusDialog::AppendText(Translate("   Moving RAH1 to carrier..."));
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_Pipette, 0, 0, GripperMode, GripperSequence);
  AswStatusDialog::AppendText(Translate("   Offline thermal shaking..."));
  EmailNotify(Translate("Test@Test.com"), Translate("Hamilton STAR waiting on user prompt"), Translate("User intervention needed.  Please check system and respond to prompt to continue"));
  Vol_SMB = NumberOfSamples * 250;
  Vol_SMB = Vol_SMB + 500;
  Vol_SMB_mL = Vol_SMB / (1000 * 1.0);
  Vol_SMB_mL = MthRound(Vol_SMB_mL, 1);
  if (Vol_SMB_mL > 4)
  {
    Vol_SMB_mL_Tube1 = 4;
    Vol_SMB_mL_Tube2 = Vol_SMB_mL - Vol_SMB_mL_Tube1;
    Vol_SMB_mL_Tube2 = Vol_SMB_mL_Tube2 + 0.5;
    Vol_SMB_mL_Tube2 = MthRound(Vol_SMB_mL_Tube2, 1);
    Vol_SMB_mL = Vol_SMB_mL + 0.5;
  }
  else
  {
    Vol_SMB_mL_Tube1 = Vol_SMB_mL;
    Vol_SMB_mL_Tube2 = 0;
  }
  Vol_EWS = NumberOfSamples * 400;
  Vol_EWS = Vol_EWS + 500;
  Vol_EWS_mL = Vol_EWS / (1000 * 1.0);
  Vol_EWS_mL = MthCeiling(Vol_EWS_mL);
  if (Vol_EWS_mL <= 8)
  {
    Vol_EWS_mL_Tube = Vol_EWS_mL;
    Vol_EWS_mL_Tub = 0;
  }
  else
  {
    Vol_EWS_mL_Tube = 0;
    Vol_EWS_mL_Tub = Vol_EWS_mL + 2;
    Vol_EWS_mL = Vol_EWS_mL_Tub;
  }
  if (RunProcess6 == 1)
  {
    Vol_RSB6 = NumberOfSamples * 47.5;
    Vol_RSB_mL = Vol_RSB6 / (1000 * 1.0);
    Vol_RSB_mL = Vol_RSB_mL + 3;
    Vol_RSB_mL = MthCeiling(Vol_RSB_mL);
    dialogHandle_27.SetOutput(Translate("Please click OK to unload carriers.  Then take the RAH1 plate for thermal cycling."), Translate("\n\nPrepare SMB, EWS, and RSB during thermal cycling."), Translate("\n\nMinimum volumes (in mL) of each reagent:  "), "\n", Translate("   SMB:  "), Vol_SMB_mL, "\n", Translate("   EWS:  "), Vol_EWS_mL, "\n", Translate("   RSB:  "), Vol_RSB_mL);
    dialogHandle_27.ShowOutput(Translate("Next Step:  Thermal Cycling"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  else
  {
    dialogHandle_26.SetOutput(Translate("Please click OK to unload carriers.  Then take the RAH1 plate for thermal cycling."), Translate("\n\nPrepare SMB and EWS during thermal cycling."), Translate("\n\nMinimum volumes (in mL) of each reagent:  "), "\n", Translate("   SMB:  "), Vol_SMB_mL, "\n", Translate("   EWS:  "), Vol_EWS_mL);
    dialogHandle_26.ShowOutput(Translate("Next Step:  Thermal Cycling"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  Trace ("Samples have been unloaded.  Now waiting for thermal cycling to be completed offline ...");
  if( 0 == RNA_HYB.SetTimer(7200) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("******************** START:   CAPTURE1 ********************"));
  AswStatusDialog::AppendText(Translate("...Capture 1"));
  NumberOfTipsRequired = NumberOfSamples * 4;
  NumberOfTipsRequired = NumberOfTipsRequired + 1;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  NumberOfTipsRequired = NumberOfSamples * 6;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 300);
  NumberOfTipsRequired = NumberOfSamples * 1;
  NumberOfTipsRequired = NumberOfTipsRequired + 9;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 1000);
  WaitForAndCheckTimer(RNA_HYB);
  if (RunProcess6 == 1)
  {
    dialogHandle_24.SetOutput(Translate("You have 30 minutes max to return the plate to the ML STAR."), "\n", Translate("\n\nHave RSB ready for the front tub of the reagent carrier on Track 31."), "\n", Translate("\n\nHave SMB (well mixed, NO BUBBLES!) and EWS for the 24-position carrier, ready for loading."), "\n", Translate(""), "\n", Translate("\n\nWhen you have the plate and reagents, click OK to to see loading instructions."), "\n", Translate(""), "\n", Translate("Note: reagent carriers will be unloaded next"));
    dialogHandle_24.ShowOutput(Translate("Ready for Capture 1"), hslOKOnly | hslQuestion | hslDefButton1, 1800);
  }
  else
  {
    if (Vol_EWS_mL_Tub > 0)
    {
      dialogHandle_25.SetOutput(Translate("You have 30 minutes max to return the plate to the ML STAR."), "\n", Translate("\n\nHave SMB (well mixed, NO BUBBLES!) for the 24-position carrier, ready for loading."), "\n", Translate(""), "\n", Translate("Have EWS ready for the front tub of the reagent carrier on Track 30"), "\n", Translate("\n\nWhen you have the plate and reagents, click OK to to see loading instructions."), "\n", Translate(""), "\n", Translate("Note: reagent carriers will be unloaded next"));
      dialogHandle_25.ShowOutput(Translate("Ready for Capture 1"), hslOKOnly | hslQuestion | hslDefButton1, 1800);
    }
    else
    {
      dialogHandle_23.SetOutput(Translate("You have 30 minutes max to return the plate to the ML STAR."), "\n", Translate("\n\nHave SMB (well mixed, NO BUBBLES!) and EWS for the 24-position carrier, ready for loading."), "\n", Translate("\n\nWhen you have the plate and reagents, click OK to to see loading instructions."), "\n", Translate(""), "\n", Translate("Note: reagent carriers will be unloaded next"));
      dialogHandle_23.ShowOutput(Translate("Ready for Capture 1"), hslOKOnly | hslQuestion | hslDefButton1, 1800);
    }
  }
  AswStatusDialog::AppendText(Translate("   Returning samples to deck..."));
  if (Vol_EWS_mL_Tub > 0)
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  }
  if (RunProcess6 == 1)
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  }
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  if (Vol_EWS_mL_Tub > 0)
  {
    dialogHandle_29.SetOutput(Translate("Place the RAH1 plate back onto the Plate-Tip carrier (on the 4th position from the rear)."), "\n", Translate(""), "\n", Translate("Reagent Carrier on Track 30: EWS in front tub"), "\n", Translate("     EWS volume in front tub (mL): "), Vol_EWS_mL_Tub, "\n", Translate(""), "\n", Translate("24-Postion carrier: SMB (well mixed, NO BUBBLES!) in Positions 7/8"), "\n", Translate("     SMB volume in Position 7 (mL): "), Vol_SMB_mL_Tube1, "\n", Translate("     SMB volume in Position 8 (mL): "), Vol_SMB_mL_Tube2, "\n", Translate("\n\nWhen ready, click OK to load the plate and reagent carriers and begin Capture 1."));
    dialogHandle_29.ShowOutput(Translate("Ready for Capture 1"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
  }
  else
  {
    dialogHandle_28.SetOutput(Translate("Place the RAH1 plate back onto the Plate-Tip carrier (on the 4th position from the rear)."), "\n", Translate(""), "\n", Translate("24-Postion carrier: EWS in Position 3 and SMB (well mixed, NO BUBBLES!) in Positions 7/8"), "\n", Translate("     EWS volume in Position 3 (mL): "), Vol_EWS_mL_Tube, "\n", Translate("     SMB volume in Position 7 (mL): "), Vol_SMB_mL_Tube1, "\n", Translate("     SMB volume in Position 8 (mL): "), Vol_SMB_mL_Tube2, "\n", Translate("\n\nWhen ready, click OK to load the plate and reagent carriers and begin Capture 1."));
    dialogHandle_28.ShowOutput(Translate("Ready for Capture 1"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
  }
  if (Vol_EWS_mL_Tub > 0)
  {
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  if (RunProcess6 == 1)
  {
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  MECC::TraceComment(Translate("***** FIRST BIND *****"));
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the RAW1 plate..............\n****************************************************************"));
  AswStatusDialog::AppendText(Translate("   Bringing the RAW1 plate to the deck..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack1, ML_STAR.MIDI_HHS3, TrackToScanBarcode, 0, 1, GripperMode, GripperSequence);
  SeqIncrement(ML_STAR.Stack1, 1);
  MECC::TraceComment(Translate("************* Now transferring sample from RAH1 to RAW1 .............."));
  AswStatusDialog::AppendText(Translate("   Transferring samples to the new plate, RAW1..."));
  NEXTERAPROCESSES::Transfer_PlateToPlate(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.HSP_Pipette, ML_STAR.MIDI_HHS3, 100, Translate("Nextera_TransferSample_SVF_SurfaceEmpty"), 5, 0.5);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("********** Fill MIDI with SMB Beads ..........."));
  AswStatusDialog::AppendText(Translate("   Adding beads..."));
  NEXTERAPROCESSES::Add_BeadsFromVial_wNewTips_14samples_per_vial(ML_STAR, NumberOfSamples, ML_STAR._SMB, ML_STAR.MIDI_HHS3, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 250, Translate("Nextera_SMBPremix_HVF_SurfaceEmpty"), Translate("Nextera_SMB_SVF_SurfaceEmpty"));
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("********** Shaking ..........."));
  AswStatusDialog::AppendText(Translate("   Shaking..."));
  TRUSEQPREP::Shake(HHS3, 1200, 300);
  MECC::TraceComment(Translate("************* Now incubate at RT  .............."));
  MECC::TraceComment(Translate("************* Now move HSP to Waste ............."));
  AswStatusDialog::AppendText(Translate("   Discarding RAH1 plate..."));
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_Waste, 0, 0, GripperMode, GripperSequence);
  Trace ("***** Now incubating at RT for 25min .......");
  AswStatusDialog::AppendText(Translate("   Incubating at room temperature for 25min..."));
  TRUSEQPREP::Shake(HHS3, 500, 1472);
  MECC::TraceComment(Translate("************* Now move to Magnet .............."));
  AswStatusDialog::AppendText(Translate("   Moving to magnet..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 1, GripperMode, GripperSequence);
  if( 0 == WaitForMagnet.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Waiting for magnet (120s).......");
  AswStatusDialog::AppendText(Translate("   Waiting for magnet..."));
  WaitForAndCheckTimer(WaitForMagnet);
  MECC::TraceComment(Translate("********** Remove supernatant to waste ........"));
  AswStatusDialog::AppendText(Translate("   Supernatant to waste..."));
  NEXTERAPROCESSES::Transfer_PlatetoWaste(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, 350, Translate("Nextera_LiquidWaste_HVF_JetEmpty"));
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now move to RT HHS .............."));
  AswStatusDialog::AppendText(Translate("   Moving to shaker..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_HHS3, 0, 0, 1, GripperMode, GripperSequence);
  MECC::TraceComment(Translate("***** FIRST WASH *****"));
  {
    for(loopCounter1 = 0; loopCounter1 < 2;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        AswStatusDialog::AppendText(Translate("   ... Wash Cycle 1 of 2"));
      }
      else
      {
        AswStatusDialog::AppendText(Translate("   ... Wash Cycle 2 of 2"));
      }
      MECC::TraceComment(Translate("************* Now pipetting EWS (Enrichment Wash Solution) .............."));
      AswStatusDialog::AppendText(Translate("      Adding EWS..."));
      if (NumberOfSamples > 18)
      {
        NEXTERAPROCESSES::Add_EWS_FromTub(ML_STAR, NumberOfSamples, ML_STAR._EWS_Tub, ML_STAR.MIDI_HHS3, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 200, Translate("Nextera_EWS_SVF_SurfaceEmpty"), 5);
      }
      else
      {
        NEXTERAPROCESSES::Add_EWS(ML_STAR, NumberOfSamples, ML_STAR._EWS, ML_STAR.MIDI_HHS3, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 200, Translate("Nextera_EWS_SVF_SurfaceEmpty"), 5);
      }
      TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
      MECC::TraceComment(Translate("************* Shaking .............."));
      AswStatusDialog::AppendText(Translate("      Shaking..."));
      TRUSEQPREP::Shake(HHS3, 1800, 240);
      MECC::TraceComment(Translate("************* Now move to 50C HHS .............."));
      AswStatusDialog::AppendText(Translate("      Moving to 50C HHS..."));
      TRUSEQPREP::GetHHSTemperature(HHS4);
      TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_HHS1, 0, 1, 0, GripperMode, GripperSequence);
      MECC::TraceComment(Translate("************* Now incubate at 50C for 30min  .............."));
      AswStatusDialog::AppendText(Translate("      Incubating at 50C for 30min..."));
      TRUSEQPREP::Shake(HHS4, 500, 1800);
      MECC::TraceComment(Translate("************* Now move to Magnet .............."));
      AswStatusDialog::AppendText(Translate("      Moving to magnet..."));
      TRUSEQPREP::GetHHSTemperature(HHS4);
      TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS1, ML_STAR.MIDI_OnMagnet, 0, 1, 0, GripperMode, GripperSequence);
      if( 0 == WaitForMagnet.SetTimer(120) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if (GripperMode == 1)
      {
        ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
      Trace ("***** Waiting for magnet (120s).......");
      AswStatusDialog::AppendText(Translate("      Waiting for magnet..."));
      WaitForAndCheckTimer(WaitForMagnet);
      MECC::TraceComment(Translate("********** Remove supernatant to waste ........"));
      AswStatusDialog::AppendText(Translate("      Supernatant to waste..."));
      NEXTERAPROCESSES::Transfer_PlatetoWaste(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, 200, Translate("Nextera_LiquidWaste_SVF_JetEmpty"));
      TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
      if (loopCounter1 == 1)
      {
        MECC::TraceComment(Translate("************* Now move to RT HHS .............."));
        AswStatusDialog::AppendText(Translate("      Moving back to shaker..."));
        TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_HHS3, 0, 0, 1, GripperMode, GripperSequence);
      }
    }
  }
  MECC::TraceComment(Translate("********** Remove residual supernatant to waste  ........"));
  AswStatusDialog::AppendText(Translate("      Removing residual supernatant to waste..."));
  NEXTERAPROCESSES::Remove_ResidualEWS(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, 20, Translate("Nextera_LiquidWaste_50F_JetEmpty"));
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("***** FIRST ELUTION *****"));
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the MIDI plate for Enrichment Mixture ..............\n****************************************************************"));
  AswStatusDialog::AppendText(Translate("   Bringing out MIDI plate for making Enrichment mixture..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack3, ML_STAR.MIDI_HHS3, 0, 0, 1, GripperMode, GripperSequence);
  MECC::TraceComment(Translate("************* Prepare elution Enrichment buffer mix .............."));
  AswStatusDialog::AppendText(Translate("   Preparing Enrichment mixture..."));
  NEXTERAPROCESSES::Create_EnrichmentMixture_SingleMIDIwell(ML_STAR, NumberOfSamples, ML_STAR._EE1, ML_STAR._HP3, ML_STAR.MIDI_EnrichmentMixture1, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR.MlStar50ulTipWithFilter, 28.5, 1.5, Translate("Nextera_EE1_HVF_SurfaceEmpty"), Translate("Nextera_HP3_50F_SurfaceEmpty"));
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Add Enrichment mixture to samples ............."));
  AswStatusDialog::AppendText(Translate("   Adding enrichment mixture to samples..."));
  NEXTERAPROCESSES::Transfer_EnrichmentMixture_SingleSource(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_EnrichmentMixture1, ML_STAR.MIDI_OnMagnet, 23);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now move Enrichment Mixture MIDI to Waste (or save for next process) ............."));
  AswStatusDialog::AppendText(Translate("   Moving plate..."));
  if (RunProcess6 == 1)
  {
    TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.Stack3, 0, 0, 0, GripperMode, GripperSequence);
  }
  else
  {
    TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_Waste, 0, 0, 0, GripperMode, GripperSequence);
  }
  MECC::TraceComment(Translate("************* Now move RAW1 to RT HHS .............."));
  AswStatusDialog::AppendText(Translate("   Moving RAW1 to shaker..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_HHS3, 0, 0, 0, GripperMode, GripperSequence);
  MECC::TraceComment(Translate("************* Shaking ............."));
  AswStatusDialog::AppendText(Translate("   Shaking..."));
  TRUSEQPREP::Shake(HHS3, 1800, 120);
  MECC::TraceComment(Translate("************* Now incubate at RT  .............."));
  if( 0 == Incubate_RAW1_RT.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at RT for 2min .......");
  AswStatusDialog::AppendText(Translate("   Incubating..."));
  WaitForAndCheckTimer(Incubate_RAW1_RT);
  MECC::TraceComment(Translate("************* Now move to Magnet .............."));
  AswStatusDialog::AppendText(Translate("   Moving RAW1 to magnet..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 0, GripperMode, GripperSequence);
  if( 0 == WaitForMagnet.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the RAH2 plate..............\n****************************************************************"));
  AswStatusDialog::AppendText(Translate("   Bringing RAH2 plate to deck..."));
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.Stack4, ML_STAR.HSP_HHS3, TrackToScanBarcode, 1, GripperMode, GripperSequence);
  SeqIncrement(ML_STAR.Stack4, 1);
  Trace ("***** Waiting for magnet (120s).......");
  AswStatusDialog::AppendText(Translate("   Waiting for magnet..."));
  WaitForAndCheckTimer(WaitForMagnet);
  MECC::TraceComment(Translate("************* Now transferring sample from RAW1 to RAH2 .............."));
  AswStatusDialog::AppendText(Translate("   Transferring samples..."));
  NEXTERAPROCESSES::Transfer_PlateToPlate(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.HSP_HHS3, 21, Translate("Nextera_TransferSample_50F_SurfaceEmpty"), 2, 0.5);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now pipetting ET2 (Elute Target Buffer) .............."));
  AswStatusDialog::AppendText(Translate("   Adding ET2..."));
  NEXTERAPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR._ET2, ML_STAR.HSP_HHS3, ML_STAR.MlStar50ulTipWithFilter, 4, Translate("Nextera_ET2_50F_SurfaceEmpty"), 5);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Shaking ............."));
  AswStatusDialog::AppendText(Translate("   Shaking..."));
  TRUSEQPREP::Shake(HHS3, 1200, 60);
  MECC::TraceComment(Translate("************* Now move MIDI to Waste ............."));
  AswStatusDialog::AppendText(Translate("   Discarding RAW1..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 0, 0, GripperMode, GripperSequence);
  if (AnswerStopPoint == 5)
  {
    MECC::TraceComment(Translate("************* Now move to Plate-Tip Carrier .............."));
    AswStatusDialog::AppendText(Translate("   Moving to carrier..."));
    TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_Pipette2, 0, 1, GripperMode, GripperSequence);
    MECC::TraceComment(Translate("************************** Stopping Point:  Capture 1 now complete **************************"));
  }
  else
  {
  }
  AswStatusDialog::AppendText(Translate("      Process 5 Complete."));
  if (AnswerStopPoint == 5)
  {
    MECC::TraceComment(Translate("************************** Stopping Point:  Hybridization 1 and Capture 1 now complete **************************"));
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  PROCESS 5 - HYBRIDIZATION 1 AND CAPTURE 1 ********************"));
}

private function Process6_HybCapture2PlusCleanup(  ) void {
  private variable loopCounter1;
  private timer WaitForMagnet;
  private timer RNA_HYB;
  private variable Vol_SMB;
  private variable Vol_RSB_mL;
  private variable Vol_EWS_mL;
  private variable Vol_SMB_mL_Tube1;
  private variable Vol_EWS_mL_Tub;
  private variable Vol_SMB_mL_Tube2;
  private variable Vol_EWS_mL_Tube;
  private variable Vol_SMB_mL;
  private variable Vol_EWS;
  private variable Vol_RSB6;
  private dialog dialogHandle_30;
  private dialog dialogHandle_31;
  private dialog dialogHandle_32;
  private dialog dialogHandle_33;
  private dialog dialogHandle_34;
  private timer Incubate_RAW2_RT;
  private variable var_ResuspensionBuffer;
  private variable NumberOfTipsRequired;
  MECC::TraceComment(Translate("*******************************************************************************************************************\n*** SUBMETHOD START:  PROCESS 6 - HYBRIDIZATION 2, CAPTURE 2, AND CLEANUP *****\n*******************************************************************************************************************"));
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(Translate("TruSeq RNA Access Library Preparation"));
  AswStatusDialog::SetStatusText(Translate("Process 6:  Hybridization 2, Capture 2, and Cleanup"));
  NumberOfTipsRequired = NumberOfSamples * 3;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  if (AnswerStartPoint == 6)
  {
    MECC::TraceComment(Translate("************* Now move to RT HHS .............."));
    AswStatusDialog::AppendText(Translate("   Moving to shaker..."));
    TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_Pipette2, ML_STAR.HSP_HHS3, 0, 1, GripperMode, GripperSequence);
  }
  MECC::TraceComment(Translate("************* Now pipetting RSB to RAH2 .............."));
  AswStatusDialog::AppendText(Translate("   Adding RSB to RAH2..."));
  TRUSEQPROCESSES::Add_RSB(ML_STAR, ML_STAR._RSB, ML_STAR.MIDI_HHS3, ML_STAR.MlStar50ulTipWithFilter, var_ResuspensionBuffer, 3);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now pipetting CT3.............."));
  AswStatusDialog::AppendText(Translate("   Adding CT3..."));
  NEXTERAPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR._CTB3, ML_STAR.HSP_HHS3, ML_STAR.MlStar50ulTipWithFilter, 50, Translate("Nextera_CTB3_50F_SurfaceEmpty"), 5);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now pipetting CEX (Coding Exome Oligos) .............."));
  AswStatusDialog::AppendText(Translate("   Adding CEX..."));
  NEXTERAPROCESSES::Add_ReagentFromHalfHeightVial(ML_STAR, NumberOfSamples, ML_STAR._CEX_EEX, ML_STAR.HSP_HHS3, ML_STAR.MlStar50ulTipWithFilter, 5, Translate("Nextera_CEX_DEX_50F_SurfaceEmpty"), 5);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  AswStatusDialog::AppendText(Translate("   Shaking..."));
  TRUSEQPREP::Shake(HHS3, 1200, 60);
  MECC::TraceComment(Translate("************* Now move to Plate-Tip Carrier .............."));
  AswStatusDialog::AppendText(Translate("   Moving back to carrier..."));
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_Pipette2, 0, 1, GripperMode, GripperSequence);
  AswStatusDialog::AppendText(Translate("   Offline thermal cycling..."));
  EmailNotify(Translate("Test@Test.com"), Translate("Hamilton STAR waiting on user prompt"), Translate("User intervention needed.  Please check system and respond to prompt to continue"));
  Vol_SMB = NumberOfSamples * 250;
  Vol_SMB = Vol_SMB + 500;
  Vol_SMB_mL = Vol_SMB / (1000 * 1.0);
  Vol_SMB_mL = MthRound(Vol_SMB_mL, 1);
  if (Vol_SMB_mL > 4)
  {
    Vol_SMB_mL_Tube1 = 4;
    Vol_SMB_mL_Tube2 = Vol_SMB_mL - Vol_SMB_mL_Tube1;
    Vol_SMB_mL_Tube2 = Vol_SMB_mL_Tube2 + 0.5;
    Vol_SMB_mL_Tube2 = MthRound(Vol_SMB_mL_Tube2, 1);
    Vol_SMB_mL = Vol_SMB_mL + 0.5;
  }
  else
  {
    Vol_SMB_mL_Tube1 = Vol_SMB_mL;
    Vol_SMB_mL_Tube2 = 0;
  }
  Vol_EWS = NumberOfSamples * 400;
  Vol_EWS = Vol_EWS + 500;
  Vol_EWS_mL = Vol_EWS / (1000 * 1.0);
  Vol_EWS_mL = MthCeiling(Vol_EWS_mL);
  if (Vol_EWS_mL <= 8)
  {
    Vol_EWS_mL_Tube = Vol_EWS_mL;
    Vol_EWS_mL_Tub = 0;
  }
  else
  {
    Vol_EWS_mL_Tube = 0;
    Vol_EWS_mL_Tub = Vol_EWS_mL + 2;
    Vol_EWS_mL = Vol_EWS_mL_Tub;
  }
  Vol_RSB6 = NumberOfSamples * 47.5;
  Vol_RSB_mL = Vol_RSB6 / (1000 * 1.0);
  Vol_RSB_mL = Vol_RSB_mL + 3;
  Vol_RSB_mL = MthCeiling(Vol_RSB_mL);
  dialogHandle_33.SetOutput(Translate("Please click OK to unload carriers.  Then take the RAH2 plate for thermal cycling."), Translate("\n\nPrepare SMB, EWS, and RSB during thermal cycling."), Translate("\n\nMinimum volumes (in mL) of each reagent:  "), "\n", Translate("   SMB:  "), Vol_SMB_mL, "\n", Translate("   EWS:  "), Vol_EWS_mL, "\n", Translate("   RSB:  "), Vol_RSB_mL);
  dialogHandle_33.ShowOutput(Translate("Next Step:  Thermal Cycling"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  Trace ("Samples have been unloaded.  Now waiting for thermal cycling to be completed offline ...");
  if( 0 == RNA_HYB.SetTimer(7200) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("******************** START:  CAPTURE 2 AND CLEANUP ********************"));
  AswStatusDialog::AppendText(Translate("Capture 2 plus Cleanup"));
  NumberOfTipsRequired = NumberOfSamples * 4;
  NumberOfTipsRequired = NumberOfTipsRequired + 1;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  NumberOfTipsRequired = NumberOfSamples * 6;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 300);
  NumberOfTipsRequired = NumberOfSamples * 1;
  NumberOfTipsRequired = NumberOfTipsRequired + 9;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 1000);
  WaitForAndCheckTimer(RNA_HYB);
  if (Vol_EWS_mL_Tub > 0)
  {
    dialogHandle_31.SetOutput(Translate("You have 30 minutes max to return the plate to the ML STAR."), "\n", Translate("\n\nHave RSB ready for the front tub of the reagent carrier on Track 31."), "\n", Translate("\n\nHave SMB (well mixed, NO BUBBLES!) for the 24-position carrier, ready for loading."), "\n", Translate(""), "\n", Translate("Have EWS ready for the front tub of the reagent carrier on Track 30"), "\n", Translate("\n\nWhen you have the plate and reagents, click OK to to see loading instructions."), "\n", Translate(""), "\n", Translate("Note: reagent carriers will be unloaded next"));
    dialogHandle_31.ShowOutput(Translate("Ready for Capture 2"), hslOKOnly | hslQuestion | hslDefButton1, 1800);
  }
  else
  {
    dialogHandle_30.SetOutput(Translate("You have 30 minutes max to return the plate to the ML STAR."), "\n", Translate("\n\nHave RSB ready for the front tub of the reagent carrier on Track 31."), "\n", Translate("\n\nHave SMB (well mixed, NO BUBBLES!) and EWS for the 24-position carrier, ready for loading."), "\n", Translate(""), "\n", Translate("\n\nWhen you have the plate and reagents, click OK to to see loading instructions."), "\n", Translate(""), "\n", Translate("Note: reagent carriers will be unloaded next"));
    dialogHandle_30.ShowOutput(Translate("Ready for Capture 2"), hslOKOnly | hslQuestion | hslDefButton1, 1800);
  }
  if (Vol_EWS_mL_Tub > 0)
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  }
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  AswStatusDialog::AppendText(Translate("   Returning samples to deck..."));
  if (Vol_EWS_mL_Tub > 0)
  {
    dialogHandle_34.SetOutput(Translate("When you have completed thermal cycling for Hybridization 2,"), "\n", Translate(""), "\n", Translate("Place the RAH2 plate back onto the Plate-Tip carrier (on the 3rd position from the rear)."), Translate("\n\nLoad 80% ethanol, Ampure beads (well mixed), and RSB tubs into the reagent carrier on track 31"), "\n", Translate(""), "\n", Translate("Reagent Carrier on Track 30: EWS in front tub"), "\n", Translate("     EWS volume in front tub (mL): "), Vol_EWS_mL_Tub, "\n", Translate(""), "\n", Translate("24-Postion carrier: SMB (well mixed, NO BUBBLES!) in Positions 7/8"), "\n", Translate("     SMB volume in Position 7 (mL): "), Vol_SMB_mL_Tube1, "\n", Translate("     SMB volume in Position 8 (mL): "), Vol_SMB_mL_Tube2, "\n", Translate("\n\nWhen ready, click OK to load the plate and reagent carriers and begin Capture 2."));
    dialogHandle_34.ShowOutput(Translate("Ready for Capture 2"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
  }
  else
  {
    dialogHandle_32.SetOutput(Translate("When you have completed thermal cycling for Hybridization 2,"), "\n", Translate("Place the RAH2 plate back onto the Plate-Tip carrier (on the 3rd position from the rear)"), Translate("\n\nLoad 80% ethanol, Ampure beads (well mixed), and RSB tubs into the reagent carrier on track 31"), "\n", Translate(""), "\n", Translate("24-Postion carrier: EWS in Position 3 and SMB (well mixed, NO BUBBLES!) in Positions 7/8"), "\n", Translate("     EWS volume in Position 3 (mL): "), Vol_EWS_mL_Tube, "\n", Translate("     SMB volume in Position 7 (mL): "), Vol_SMB_mL_Tube1, "\n", Translate("     SMB volume in Position 8 (mL): "), Vol_SMB_mL_Tube2, "\n", Translate("\n\nWhen ready, click OK to load the plate and reagent carriers and begin Capture 2."));
    dialogHandle_32.ShowOutput(Translate("Ready for Capture 2"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
  }
  if (Vol_EWS_mL_Tub > 0)
  {
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  MECC::TraceComment(Translate("***** SECOND BIND *****"));
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the RAW2 plate..............\n****************************************************************"));
  AswStatusDialog::AppendText(Translate("   Moving RAW2 to shaker..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack1, ML_STAR.MIDI_HHS3, TrackToScanBarcode, 0, 1, GripperMode, GripperSequence);
  SeqIncrement(ML_STAR.Stack1, 1);
  MECC::TraceComment(Translate("************* Now transferring sample from RAH2 to RAW2 .............."));
  AswStatusDialog::AppendText(Translate("   Transferring samples..."));
  NEXTERAPROCESSES::Transfer_PlateToPlate(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.HSP_Pipette2, ML_STAR.MIDI_HHS3, 100, Translate("Nextera_TransferSample_SVF_SurfaceEmpty"), 5, 0.5);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("********** Fill MIDI with Beads (SMB) ..........."));
  AswStatusDialog::AppendText(Translate("   Filling MIDI with beads..."));
  NEXTERAPROCESSES::Add_BeadsFromVial_wNewTips_14samples_per_vial(ML_STAR, NumberOfSamples, ML_STAR._SMB, ML_STAR.MIDI_HHS3, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 250, Translate("Nextera_SMBPremix_HVF_SurfaceEmpty"), Translate("Nextera_SMB_SVF_SurfaceEmpty"));
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  AswStatusDialog::AppendText(Translate("   Shaking..."));
  TRUSEQPREP::Shake(HHS3, 1200, 300);
  MECC::TraceComment(Translate("************* Now incubate at RT  .............."));
  MECC::TraceComment(Translate("************* Now move HSP to Waste ............."));
  AswStatusDialog::AppendText(Translate("   Moving plate to waste..."));
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_Pipette2, ML_STAR.HSP_Waste, 0, 0, GripperMode, GripperSequence);
  Trace ("***** Now incubating at RT for 25min .......");
  AswStatusDialog::AppendText(Translate("   Incubating at room temperature for 25min..."));
  TRUSEQPREP::Shake(HHS3, 500, 1472);
  MECC::TraceComment(Translate("************* Now move to Magnet .............."));
  AswStatusDialog::AppendText(Translate("   Moving to magnet..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 1, GripperMode, GripperSequence);
  if( 0 == WaitForMagnet.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Waiting for magnet (120s).......");
  AswStatusDialog::AppendText(Translate("   Waiting for magnet..."));
  WaitForAndCheckTimer(WaitForMagnet);
  MECC::TraceComment(Translate("********** Remove supernatant to waste ........"));
  AswStatusDialog::AppendText(Translate("   Removing supernatant..."));
  NEXTERAPROCESSES::Transfer_PlatetoWaste(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, 350, Translate("Nextera_LiquidWaste_HVF_JetEmpty"));
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now move to RT HHS .............."));
  AswStatusDialog::AppendText(Translate("   Moving to shaker..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_HHS3, 0, 0, 1, GripperMode, GripperSequence);
  MECC::TraceComment(Translate("***** SECOND WASH *****"));
  AswStatusDialog::AppendText(Translate("   Washing..."));
  {
    for(loopCounter1 = 0; loopCounter1 < 2;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        AswStatusDialog::AppendText(Translate("   ... Wash Cycle 1 of 2"));
      }
      else
      {
        AswStatusDialog::AppendText(Translate("   ... Wash Cycle 2 of 2"));
      }
      MECC::TraceComment(Translate("************* Now pipetting EWS (Enrichment Wash Solution) .............."));
      AswStatusDialog::AppendText(Translate("   Pipetting wash solution..."));
      if (NumberOfSamples > 18)
      {
        NEXTERAPROCESSES::Add_EWS_FromTub(ML_STAR, NumberOfSamples, ML_STAR._EWS_Tub, ML_STAR.MIDI_HHS3, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 200, Translate("Nextera_EWS_SVF_SurfaceEmpty"), 5);
      }
      else
      {
        NEXTERAPROCESSES::Add_EWS(ML_STAR, NumberOfSamples, ML_STAR._EWS, ML_STAR.MIDI_HHS3, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 200, Translate("Nextera_EWS_SVF_SurfaceEmpty"), 5);
      }
      TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
      AswStatusDialog::AppendText(Translate("   Shaking..."));
      TRUSEQPREP::Shake(HHS3, 1800, 240);
      MECC::TraceComment(Translate("************* Now move to 50C HHS .............."));
      AswStatusDialog::AppendText(Translate("   Moving to 50C HHS..."));
      TRUSEQPREP::GetHHSTemperature(HHS4);
      TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_HHS1, 0, 1, 0, GripperMode, GripperSequence);
      MECC::TraceComment(Translate("************* Now incubate at 50C for 30min  .............."));
      AswStatusDialog::AppendText(Translate("   Incubating at 50C for 30min..."));
      TRUSEQPREP::Shake(HHS4, 500, 1800);
      MECC::TraceComment(Translate("************* Now move to Magnet .............."));
      AswStatusDialog::AppendText(Translate("   Moving to magnet..."));
      TRUSEQPREP::GetHHSTemperature(HHS4);
      TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS1, ML_STAR.MIDI_OnMagnet, 0, 1, 0, GripperMode, GripperSequence);
      if( 0 == WaitForMagnet.SetTimer(120) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if (GripperMode == 1)
      {
        ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
      Trace ("***** Waiting for magnet (120s).......");
      AswStatusDialog::AppendText(Translate("   Waiting for magnet.."));
      WaitForAndCheckTimer(WaitForMagnet);
      MECC::TraceComment(Translate("********** Remove supernatant to waste ........"));
      AswStatusDialog::AppendText(Translate("   Removing supernatant..."));
      NEXTERAPROCESSES::Transfer_PlatetoWaste(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, 200, Translate("Nextera_LiquidWaste_SVF_JetEmpty"));
      TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
      if (loopCounter1 == 1)
      {
        MECC::TraceComment(Translate("************* Now move to RT HHS .............."));
        AswStatusDialog::AppendText(Translate("   Moving to shaker..."));
        TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_HHS3, 0, 0, 0, GripperMode, GripperSequence);
      }
    }
  }
  MECC::TraceComment(Translate("********** Remove residual supernatant to waste  ........"));
  AswStatusDialog::AppendText(Translate("      Removing residual supernatant to waste..."));
  NEXTERAPROCESSES::Remove_ResidualEWS(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, 20, Translate("Nextera_LiquidWaste_50F_JetEmpty"));
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("***** SECOND ELUTION *****"));
  AswStatusDialog::AppendText(Translate("   Begin second elution..."));
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the MIDI plate for Enrichment Mixture ..............\n****************************************************************"));
  AswStatusDialog::AppendText(Translate("   Moving MIDI to shaker..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack3, ML_STAR.MIDI_HHS3, 0, 0, 1, GripperMode, GripperSequence);
  MECC::TraceComment(Translate("************* Prepare and distribute enrichment buffer mix .............."));
  AswStatusDialog::AppendText(Translate("   Preparing enrichment mixture..."));
  NEXTERAPROCESSES::Create_EnrichmentMixture_SingleMIDIwell(ML_STAR, NumberOfSamples, ML_STAR._EE1, ML_STAR._HP3, ML_STAR.MIDI_EnrichmentMixture2, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR.MlStar50ulTipWithFilter, 28.5, 1.5, Translate("Nextera_EE1_HVF_SurfaceEmpty"), Translate("Nextera_HP3_50F_SurfaceEmpty"));
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  AswStatusDialog::AppendText(Translate("   Transferring enrichment mixture..."));
  NEXTERAPROCESSES::Transfer_EnrichmentMixture_SingleSource(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_EnrichmentMixture2, ML_STAR.MIDI_OnMagnet, 23);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now move Enrichment Mixture MIDI to Waste ............."));
  AswStatusDialog::AppendText(Translate("   Moving MIDI to waste..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_Waste, 0, 0, 0, GripperMode, GripperSequence);
  MECC::TraceComment(Translate("************* Now move RAW2 to RT HHS .............."));
  AswStatusDialog::AppendText(Translate("   Moving to shaker..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_HHS3, 0, 0, 0, GripperMode, GripperSequence);
  AswStatusDialog::AppendText(Translate("   Shaking..."));
  TRUSEQPREP::Shake(HHS3, 1200, 120);
  MECC::TraceComment(Translate("************* Now incubate at RT  .............."));
  if( 0 == Incubate_RAW2_RT.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at RT for 2min .......");
  AswStatusDialog::AppendText(Translate("   Incubating..."));
  WaitForAndCheckTimer(Incubate_RAW2_RT);
  MECC::TraceComment(Translate("************* Now move to Magnet .............."));
  AswStatusDialog::AppendText(Translate("   Moving to magnet..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 0, GripperMode, GripperSequence);
  if( 0 == WaitForMagnet.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the RAC1 plate..............\n****************************************************************"));
  AswStatusDialog::AppendText(Translate("   Moving new plate to shaker..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack1, ML_STAR.MIDI_HHS3, TrackToScanBarcode, 0, 1, GripperMode, GripperSequence);
  SeqIncrement(ML_STAR.Stack1, 1);
  Trace ("***** Waiting for magnet (120s).......");
  AswStatusDialog::AppendText(Translate("   Waiting for magnet..."));
  WaitForAndCheckTimer(WaitForMagnet);
  MECC::TraceComment(Translate("************* Now transferring sample from RAW2 to RAC1 .............."));
  AswStatusDialog::AppendText(Translate("   Transferring samples..."));
  NEXTERAPROCESSES::Transfer_PlateToPlate(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_HHS3, 21, Translate("Nextera_TransferSample_50F_SurfaceEmpty"), 1.5, 0.3);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now pipetting ET2 (Elute Target Buffer) .............."));
  AswStatusDialog::AppendText(Translate("   Adding ET2..."));
  NEXTERAPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR._ET2, ML_STAR.MIDI_HHS3, ML_STAR.MlStar50ulTipWithFilter, 4, Translate("Nextera_ET2_50F_SurfaceEmpty"), 5);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  AswStatusDialog::AppendText(Translate("   Shaking..."));
  TRUSEQPREP::Shake(HHS3, 1800, 60);
  MECC::TraceComment(Translate("************* Now move to waste  .............."));
  AswStatusDialog::AppendText(Translate("   Moving MIDI to waste..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 0, 0, GripperMode, GripperSequence);
  AswStatusDialog::AppendText(Translate("   Begin Cleanup 2..."));
  CleanUp2(45, 300, 70, 27.5);
  MECC::TraceComment(Translate("************* Now move to Magnet .............."));
  AswStatusDialog::AppendText(Translate("   Moving to magnet..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 0, GripperMode, GripperSequence);
  if( 0 == WaitForMagnet.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the RAA plate..............\n****************************************************************"));
  AswStatusDialog::AppendText(Translate("   Bringing RAA plate to deck..."));
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.Stack4, ML_STAR.HSP_Pipette, TrackToScanBarcode, 1, GripperMode, GripperSequence);
  SeqIncrement(ML_STAR.Stack4, 1);
  Trace ("***** Waiting for magnet (120s).......");
  AswStatusDialog::AppendText(Translate("   Waiting for magnet..."));
  WaitForAndCheckTimer(WaitForMagnet);
  MECC::TraceComment(Translate("************* Now transferring sample from RAC1 to RAA .............."));
  AswStatusDialog::AppendText(Translate("   Transferring samples..."));
  TRUSEQPROCESSES::Transfer_CleanSample(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.HSP_Pipette, 25);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now move MIDI to Waste ............."));
  AswStatusDialog::AppendText(Translate("   Moving MIDI to waste..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 0, 0, GripperMode, GripperSequence);
  AswStatusDialog::AppendText(Translate("      Process 6 Complete."));
  if (AnswerStopPoint == 6)
  {
    MECC::TraceComment(Translate("************************** Stopping Point:  Hybridization 2, Capture 2, and Cleanup now complete **************************"));
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  PROCESS 6 - HYBRIDIZATION 2, CAPTURE 2, AND CLEANUP ********************"));
}

private function Process7_PCR2(  ) void {
  private dialog dialogHandle_35;
  MECC::TraceComment(Translate("****************************************************************************************************************************\n******************** SUBMETHOD START:  PROCESS 7 - PCR2 ********************\n****************************************************************************************************************************"));
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(Translate("TruSeq RNA Access Library Preparation"));
  AswStatusDialog::SetStatusText(Translate("Process 7:  PCR2"));
  MECC::TraceComment(Translate("************* Now pipetting PPC (PCR Primer Cocktail) .............."));
  AswStatusDialog::AppendText(Translate("   Adding PPC..."));
  NEXTERAPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.Vial_PPC, ML_STAR.HSP_Pipette, ML_STAR.MlStar50ulTipWithFilter, 5, Translate("Nextera_PPC_50F_SurfaceEmpty"), 5);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now pipetting EPM (Enhanced PCR Mix) .............."));
  AswStatusDialog::AppendText(Translate("   Adding EPM..."));
  NEXTERAPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR._NEM, ML_STAR.HSP_Pipette, ML_STAR.MlStar50ulTipWithFilter, 20, Translate("TruSeq_50F_EPM_SurfaceEmpty"), 5);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  AswStatusDialog::AppendText(Translate("   Moving to shaker..."));
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_HHS3, 0, 0, GripperMode, GripperSequence);
  AswStatusDialog::AppendText(Translate("   Shaking..."));
  TRUSEQPREP::Shake(HHS3, 1200, 60);
  AswStatusDialog::AppendText(Translate("   Moving to carrier..."));
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_Pipette, 0, 1, GripperMode, GripperSequence);
  AswStatusDialog::AppendText(Translate("   Offline thermal cycling..."));
  EmailNotify(Translate("Test@Test.com"), Translate("Hamilton STAR waiting on user prompt"), Translate("User intervention needed.  Please check system and respond to prompt to continue"));
  dialogHandle_35.SetOutput(Translate("Please click OK to unload carrier.  Then take the RAA plate for thermal cycling."), Translate("\n\nThe reagent carrier(s) will also be unloaded at this time."), Translate("\n\nIf continuing on to PCR Cleanup, prepare fresh 80% ethanol, beads (well mixed), and RSB."));
  dialogHandle_35.ShowOutput(Translate("Next Step:  Thermal Cycling"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  if (RunProcess6 == 1)
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  }
  AswStatusDialog::AppendText(Translate("      Process 7 Complete."));
  if (AnswerStopPoint == 7)
  {
    MECC::TraceComment(Translate("************************** Stopping Point:  PCR2 **************************"));
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  PROCESS 7 - PCR2 ********************"));
}

private function Process8_PCRCleanup2(  ) void {
  private timer WaitForMagnet;
  private dialog dialogHandle_36;
  private dialog dialogHandle_37;
  private variable NumberOfTipsRequired;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  PROCESS 8 - PCR CLEANUP 2 ********************\n*************************************************************************************************************************"));
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(Translate("TruSeq RNA Access Library Preparation"));
  AswStatusDialog::SetStatusText(Translate("Process 8:  PCR Cleanup 2"));
  NumberOfTipsRequired = NumberOfSamples * 2;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  if (AnswerStartPoint < 8)
  {
    dialogHandle_36.SetOutput(Translate("When you have completed thermal cycling for PCR 2,"), Translate("\nplace the NEM plate back onto the Plate-Tip carrier"), Translate("\n(on the 4th position from the rear)."), Translate("\n\nLoad 80% ethanol, Ampure beads (well mixed), and RSB tubs into the reagent carrier on track 31."), Translate("\n\nWhen ready, click OK to load the carriers and begin PCR Cleanup 2."));
    dialogHandle_36.ShowOutput(Translate("Ready for PCR Cleanup 2"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the RAC2 plate..............\n****************************************************************"));
  AswStatusDialog::AppendText(Translate("   Bringing RAC2 to the deck..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack2, ML_STAR.MIDI_HHS3, TrackToScanBarcode, 0, 0, GripperMode, GripperSequence);
  SeqIncrement(ML_STAR.Stack2, 1);
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the RAL plate..............\n****************************************************************"));
  AswStatusDialog::AppendText(Translate("   Bringing RAL to the deck..."));
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.Stack4, ML_STAR.HSP_Pipette2, TrackToScanBarcode, 1, GripperMode, GripperSequence);
  SeqIncrement(ML_STAR.Stack4, 1);
  MECC::TraceComment(Translate("************* Now transferring sample from RAA to RAC2 .............."));
  AswStatusDialog::AppendText(Translate("   Transferring samples..."));
  NEXTERAPROCESSES::Transfer_PlateToPlate(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.HSP_Pipette, ML_STAR.MIDI_HHS3, 50, Translate("Nextera_TransferSample_50F_SurfaceEmpty"), 0, 0.5);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  AswStatusDialog::AppendText(Translate("   Begin Cleanup..."));
  CleanUp2(90, 300, 140, 32);
  MECC::TraceComment(Translate("************* Now move to Magnet .............."));
  AswStatusDialog::AppendText(Translate("   Moving to magnet..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 0, GripperMode, GripperSequence);
  if( 0 == WaitForMagnet.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("************* Now move RAA to Waste ............."));
  AswStatusDialog::AppendText(Translate("   Moving HSP to waste..."));
  TRUSEQPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_Waste, 0, 1, GripperMode, GripperSequence);
  Trace ("***** Waiting for magnet (120s).......");
  AswStatusDialog::AppendText(Translate("   Waiting for magnet..."));
  WaitForAndCheckTimer(WaitForMagnet);
  MECC::TraceComment(Translate("************* Now transferring sample from RAC2 to RAL .............."));
  AswStatusDialog::AppendText(Translate("   Transferring samples..."));
  TRUSEQPROCESSES::Transfer_CleanSample(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.HSP_Pipette2, 30);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now move MIDI to Waste ............."));
  AswStatusDialog::AppendText(Translate("   Moving MIDI to waste..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 0, 0, GripperMode, GripperSequence);
  dialogHandle_37.SetOutput(Translate("Please click OK to unload carriers.  Then take the RAL plate for quantification."));
  dialogHandle_37.ShowOutput(Translate("Next Step:  Library Quantification"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  AswStatusDialog::AppendText(Translate("      Process 8 Complete."));
  if (AnswerStopPoint == 8)
  {
    MECC::TraceComment(Translate("************************** Stopping Point:  PCR Cleanup 2 now complete **************************"));
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  PROCESS 8 - PCRCleanup2 ********************"));
}

private function CleanUp2( variable var_VolumeBeads, variable var_BeadIncubationTime, variable var_VolumeSupernatant, variable var_ResuspensionBuffer ) void {
  private variable loopCounter5;
  private timer WaitForMagnet;
  private timer Incubate_RT_2min;
  private timer Incubate_Beads_RT;
  private timer EvaporationTime;
  private variable NumberOfTipsRequired;
  MECC::TraceComment(Translate("******************** SUBMETHOD START:  ENRICHMENT CLEANUP ********************"));
  MECC::TraceComment(Translate("********** Fill MIDI with Beads ..........."));
  AswStatusDialog::AppendText(Translate("         Adding beads..."));
  Trace ("Volume of Sample Purification Beads per well:  ", var_VolumeBeads);
  NEXTERAPROCESSES::Add_AmpureSingle(ML_STAR, ML_STAR._Beads_AMPure, ML_STAR.MIDI_HHS3, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfSamples, var_VolumeBeads, 1, 1);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  AswStatusDialog::AppendText(Translate("         Shaking..."));
  TRUSEQPREP::Shake(HHS3, 1800, 60);
  if( 0 == Incubate_Beads_RT.SetTimer(var_BeadIncubationTime) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at RT .......");
  NumberOfTipsRequired = NumberOfSamples * 3;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 300);
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, 16, 1000);
  AswStatusDialog::AppendText(Translate("         Incubating..."));
  WaitForAndCheckTimer(Incubate_Beads_RT);
  MECC::TraceComment(Translate("********** Now move to magnet .............."));
  AswStatusDialog::AppendText(Translate("         Moving to magnet..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 1, GripperMode, GripperSequence);
  if( 0 == WaitForMagnet.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Waiting for magnet (120s).......");
  AswStatusDialog::AppendText(Translate("         Waiting for magnet..."));
  WaitForAndCheckTimer(WaitForMagnet);
  MECC::TraceComment(Translate("********** Remove supernatant to waste ........"));
  AswStatusDialog::AppendText(Translate("         Removing supernatant..."));
  TRUSEQPROCESSES::Transfer_PlatetoWaste(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, var_VolumeSupernatant, Translate("TruSeq_SVF_Waste_JetEmpty"));
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  {
    for(loopCounter5 = 0; loopCounter5 < 2;)
    {
      loopCounter5 = loopCounter5 + 1;
      AswStatusDialog::AppendText(Translate("         Add ethanol..."));
      TRUSEQPROCESSES::Add_Ethanol(ML_STAR, NumberOfSamples, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR._EtOH_80, ML_STAR.MIDI_OnMagnet, Translate("TruSeq_HVF_80PercentEtOH_JetPart"), TrackingEthanolVolume_80);
      TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
      MECC::TraceComment(Translate("********** Remove ethanol supernatant to waste ........"));
      AswStatusDialog::AppendText(Translate("         Remove ethanol..."));
      TRUSEQPROCESSES::Transfer_PlatetoWaste(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, 200, Translate("TruSeq_SVF_EthanolSupernatantToWaste_JetEmpty"));
      TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    }
  }
  if( 0 == EvaporationTime.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("********** Remove residual ethanol  ........"));
  AswStatusDialog::AppendText(Translate("         Removing residual ethanol..."));
  TRUSEQPROCESSES::Remove_ResidualEtOH(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, 20, Translate("TruSeq_50F_EtOH_JetEmpty"));
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  NumberOfTipsRequired = NumberOfSamples * 3;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  Trace ("***** Now waiting for ethanol evaporation (300s).......");
  AswStatusDialog::AppendText(Translate("         Waiting for evaporation..."));
  WaitForAndCheckTimer(EvaporationTime);
  MECC::TraceComment(Translate("********** Now move to RT HHS .............."));
  AswStatusDialog::AppendText(Translate("         Moving to shaker..."));
  TRUSEQPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_HHS3, 0, 0, 1, GripperMode, GripperSequence);
  MECC::TraceComment(Translate("********** Now pipetting Resuspension Buffer .............."));
  AswStatusDialog::AppendText(Translate("         Adding RSB..."));
  TRUSEQPROCESSES::Add_RSB(ML_STAR, ML_STAR._RSB, ML_STAR.MIDI_HHS3, ML_STAR.MlStar50ulTipWithFilter, var_ResuspensionBuffer, 3);
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  AswStatusDialog::AppendText(Translate("         Shaking..."));
  TRUSEQPREP::Shake(HHS3, 1800, 60);
  if( 0 == Incubate_RT_2min.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at RT for 120s .......");
  AswStatusDialog::AppendText(Translate("         Incubating..."));
  WaitForAndCheckTimer(Incubate_RT_2min);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  ENRICHMENT CLEANUP ********************"));
}

private function _VersionHistory(  ) void {
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq RNA Access Sample Preparation\nBy:          Susan Lee, Hamilton Company, Reno, NV\nDate:      April 18, 2014\nVersion:  1.1.2\n\nBased on Illumina's TruSeq RNA Access Library Prep Guide (part # 150049525 Rev. A)\n\nThe method assumes that library prep (processes 1-3) will be done on Day 1, and the rest on Day 2.\n\nVersion Notes:\n1. Create Enrichment Mixture is done offline before the run, into the MIDI plates, which then go on the stacker (stack3)\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq RNA Access Sample Preparation\nBy:          Susan Lee, Hamilton Company, Reno, NV\nDate:      August 1, 2014\nVersion:  1.1.4 (by Jon Engebretsen)\n\nBased on Illumina's TruSeq RNA Access Library Prep Guide (part # 150049525 Rev. A)\n\nThe method assumes that library prep (processes 1-3) will be done on Day 1, and the rest on Day 2.\n\nVersion Notes:\n1. Added ASW dialog Terminate/Initialize for each Process submethod for 100 line max workaround\n2. Added extra 20uL removal of EWS for 1st wash and 2nd wash in Processes 5 and 6\n      Made \"Nextera_LiquidWaste_50F_JetEmpty\" based on water 50F JetE predefined, Liquid waste (non-alcohol based)\n      NexteraProcesses.smt edit\n        Copied Remove_ResidualEtOH submethod and created RemoveResidualEWS submethod\n3. Changed elution enrichment mix addtion to be done by hand (troubleshooting) for Processes 5 and 6\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq RNA Access Sample Preparation\nBy:          Susan Lee, Hamilton Company, Reno, NV\nDate:      August 18, 2014\nVersion:  1.1.5 (by Jon Engebretsen)\n\nBased on Illumina's TruSeq RNA Access Library Prep Guide (part # 150049525 Rev. A)\n\nThe method assumes that library prep (processes 1-3) will be done on Day 1, and the rest on Day 2.\n\nVersion Notes:\n1. Added Create_EnrichmentMixture_SingleMIDIwell and Transfer_EnrichmentMixture_SingleSource for Processes 5 and 6\n2. TruSeq RNA Access v1.1.1.lay update for MIDI_EnrichmentMixture1 & 2, single wells\n3. Added MIDI plate back to count in Calc Resrources for Elution Enrichment Mix for Processes 5 and 6\n4. Updated reagent prep calculations for Elution Enrichment Mix\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq RNA Access Sample Preparation\nBy:          Susan Lee, Hamilton Company, Reno, NV\nDate:      August 28, 2014\nVersion:  1.1.6 (by Jon Engebretsen)\n\nBased on Illumina's TruSeq RNA Access Library Prep Guide (part # 150049525 Rev. A)\n\nThe method assumes that library prep (processes 1-3) will be done on Day 1, and the rest on Day 2.\n\nVersion Notes:\n1. Changed NES (HSP) to NEL (HSP), as decribed in protocol guide, CalcResources/Process8/etc...(use find function)\n2. Corrected VialCarBCsToCheck_Rgts variable for scanning reagent vials in CalcResources for Processes 5-8, and added scanning logic for stop point process\n      AnswerStartPoint=5: \"12,14,18,19,\" -> \"9,13,27,30,32,\"\n      AnswerStartPoint=6: \"12,14,18,19,\" -> \"9,13,27,30,32,\"\n      AnswerStartPoint=7: \"23,25\" -> \"10,23\"\n      AnswerStartPoint=8: \"12,14,18,19,\" -> \"\"\n3. Fixed bug in rgt calc for EE1 and HP3  to only add DV if there is needed volume from processes 5 or 6, in CalcResources\n4. Updated user prompts in Processes 5 and 6 after thermocycle to refresh operator on positions for EWS and SMB in 24-vial carrier\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq RNA Access Sample Preparation\nBy:          Susan Lee, Hamilton Company, Reno, NV\nDate:      September 12, 2014\nVersion:  1.1.7 (by Jon Engebretsen)\n\nBased on Illumina's TruSeq RNA Access Library Prep Guide (part # 150049525 Rev. A)\n\nThe method assumes that library prep (processes 1-3) will be done on Day 1, and the rest on Day 2.\n\nVersion Notes:\n1. Copied Process4_NormalizePool submethod from TruSeq Stranded mRNA, updated to use new submethod as Process 4\n          Updated for ASW status window strategy to match other submethods\n          Removed If statement to depend on Startpoint to browse for Normalization file\n          Changed If statement to run Pool if AnswerPooling > 0\n          Fixed Move midi smt command to use GripperMode and GripperSequence\n          Deleted old Process4 placeholder\n          Updated buffer parameter in Normalize step to use RSB instead of Tris\n          Updated to prompt for RSB instead of Tris on User Output prompt when start Process 4\n          Updated carrier to load Rgt2 carrier instead of Rgt1 carrier for Process 4, and not load 32-Pos vial carrier at Track 33 (updated If trees)\n          Fixed trace description for AnswerPooling prompt\n          Updated Calculate resources: plates required (for Process 5 too), tips required\n          Updated decrement from stack sequences after move MIDI and HSP steps\n          Need to update plate movement for running Processes 4-5 together to account for pooled TSP1 HSP plate as sample source, instead of providing NEH1 HSP with 45uL prepped manually \n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq RNA Access Sample Preparation\nBy:          Susan Lee, Hamilton Company, Reno, NV\nDate:      October 20, 2014\nVersion:  1.1.8 (by Jon Engebretsen)\n\nBased on Illumina's TruSeq RNA Access Library Prep Guide (part # 150049525 Rev. B)\n\nThe method assumes that library prep (processes 1-3) will be done on Day 1, and the rest on Day 2.\n\nNote--deviations from TruSeq RNA Access Library Prep Guide:\n-Changed all SPRI (Ampure) bead binding steps to 5 min from 15 min and the corresponding dry time to 5 min from 15 min. [CleanUp submethod]\n-Changed second strand incubation from 60 min to 30 min. [Process 1 submethod, INCUBATE 3 DFP]\n\nVersion Notes:\n1. Added note in user prompts prior to Loading SMB in Processes5-6 to make sure there are no bubbles after prepping the reagent\n2. Increased maximum number of pools from 8 to 24 (for Processes 5-8)\n3. Changed CEX addition to use Add_ReagentFromHalfHeightVial instead of Add_CEX_EEX from NEXTERAPROCESSES smt (to allow for consolidation of reagent to 1 tube)\n4. Updated NEXTERAPROCESSES smt to include Add_BeadsFromVial_wNewTips_14samples_per_vial (for processing up to 24 pools for Processes5-8)\n5. Updated Processes 5 and 6 to use Add_BeadsFromVial_wNewTips_14samples_per_vial to add SMB \n6. Updated to TruSeq RNA Access v1.1.2 layout to include new EWS_Tub sequence, removed unneeded sequences (TD, TDE1, ST, xEX)\n7. Updated NEXTERAPROCESSES smt to include Add_EWS_FromTub (for processing up to 24 pools for Processes5-8)\n8. Updated Processes 5 and 6 to use Add_EWS_FromTub to add EWS if # sample pools > 18 (> 8mL supply volume) \n9. Updated user prompts and autoload steps for Processes 5 and 6 to account for SMB in 2 positions and/or EWS in tub vs. tube\n10. Updated CalculateResources submethod to include new SMB tube 1 and 2 volumes, and EWS tub volume\n11. Updated to reflect Rev. B of library prep guide (name changes for plates)\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq RNA Access Sample Preparation\nBy:          Susan Lee, Hamilton Company, Reno, NV\nDate:      November 13, 2014\nVersion:  1.1.9 (by Jon Engebretsen)\n\nBased on Illumina's TruSeq RNA Access Library Prep Guide (part # 150049525 Rev. B)\n\nThe method assumes that library prep (processes 1-3) will be done on Day 1, and the rest on Day 2.\n\n\nVersion Notes:\n1. Changed background color of Custom Dialog's to LightSteelBlue\n2. Changed second strand incubation from 30 min to 60 min. [Process 1 submethod, INCUBATE 3 DFP]\n3. Added error handling in CalculateResources to restrict users from selecting processes beyond the assumptions (1-3, 4 separately, & 5-8)\n4. Added new prompt in CalculateResources, if running Process 5 will set Hyb1SamplePlate variable, used to skip transfer of sample to RAH1 in Hyb 1 if norm/pool offline\n5. Updated text string in CalculateResources for final loading instruction prompt, for Hyb1SamplePlate option (TSP1 vs RAH1) in Process 5\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq RNA Access Sample Preparation\nBy:          Susan Lee, Hamilton Company, Reno, NV\nDate:      November 21, 2014\nVersion:  1.2.0 (by Jon Engebretsen)\n\nBased on Illumina's TruSeq RNA Access Library Prep Guide (part # 150049525 Rev. B)\n\nThe method assumes that library prep (processes 1-3) will be done on Day 1, and the rest on Day 2.\n\n\nVersion Notes:\n1. Updated so that mineral oil will also be added to FFPE samples in Process 1 (logic updates prior to fragmentation of Non-FFPE samples, changes to tip count & reagent calc)\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq RNA Access Sample Preparation\nBy:          Susan Lee, Hamilton Company, Reno, NV\nDate:      December 12, 2014\nVersion:  1.2.1 (by Jon Engebretsen)\n\nBased on Illumina's TruSeq RNA Access Library Prep Guide (part # 150049525 Rev. B)\n\nThe method assumes that library prep (processes 1-3) will be done on Day 1, and the rest on Day 2.\n\n\nVersion Notes:\n1. Updated prep logic to alert and abort if user selects 0 # of pools and >24 samples for Processes 5-8\n2. Changed Process1 nonFFPE sample transfer to FFPE plate from 17uL to 27uL (includes oil volume), and made new LC\n3. Added email notifcation option for tip reload steps (Email notify flag in setup, EmailNotify submethod, CheckTipQty submethod)\n4. Fixed plate barcode scan positions for load during Process1 with mixed FFPE and NonFFPE\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq RNA Access Sample Preparation\nBy:          Susan Lee, Hamilton Company, Reno, NV\nDate:      February 25, 2015\nVersion:  1.2.2 (by Jon Engebretsen)\n\nBased on Illumina's TruSeq RNA Access Library Prep Guide (part # 150049525 Rev. B)\n\nThe method assumes that library prep (processes 1-3) will be done on Day 1, and the rest on Day 2.\n\n\nVersion Notes:\n1. Process5/1st Bind & Process 6/2nd Bind: changed 25min RT incubation to also shake at 500 RPM\n2. Process5/1st Wash & Process 6/2nd Wash: changed 20min 50C incubation to 30min 50C incubation + shake at 500 RPM\n3. \n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq RNA Access Sample Preparation\nBy:          Susan Lee, Hamilton Company, Reno, NV\nDate:      June 15, 2015\nVersion:  1.2.3 (by Jon Engebretsen)\n\nBased on Illumina's TruSeq RNA Access Library Prep Guide (part # 150049525 Rev. B)\n\nThe method assumes that library prep (processes 1-3) will be done on Day 1, and the rest on Day 2.\n\n\nVersion Notes:\n1. Updated to deck TruSeq RNA Access v1.1.3.lay, added sequences for norm and pool for enrichment\n2. Fixed typo in adapter barcode variable string that added Index 1 position instead of Index 2\n3. Redesigned Process4_NormalizePool to prep for enrichment portion (added NormPool_Calc and NormPool_Prep submethods)\n4. Updated Process5 to use RAH1 plate with 45uL of pooled samples as only input\n5. Fixed required tips calculations to include extra 50uL tips variables\n6. Added variables for TrackToScanBarcode for Move submethods to scan plate barcode at track #, and TrackToParkAL track #\n7. Updated CheckTipQty submethod from <= min # tips to only < min # of tips (can use exact number needed)\n8. Updated tips required calculations for all processes\n9. Add additional EmailNotify steps for offline steps like thermal cycling\n10. Finalized design of main loading prompt\n11. Updated SMP_CAR_32_VIALS_Lasso.rck for ET2 to be in 500uL tube\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq RNA Access Sample Preparation\nBy:          Susan Lee, Hamilton Company, Reno, NV\nDate:      October 28, 2015\nVersion:  1.2.4 (by Jon Engebretsen)\n\nBased on Illumina's TruSeq RNA Access Library Prep Guide (part # 150049525 Rev. B)\n\nThe method assumes that library prep (processes 1-3) will be done on Day 1, and the rest on Day 2.\n\n\nVersion Notes:\n1. Bug fix: typo corrected in adapter barcode variable string that added Index1 position instead of Index2\n2. Updated to TruSeqProcessess.smt v3.0.5, includes bug fix in Norm submethod to automatically increment dispense sequence\n\n\n*************************************************************************************************************************************"));
}

private function Process4_NormalizePool(  ) void {
  private dialog dialogHandle_38;
  private variable loopCounter_Pool;
  private variable var_ArrayIndex;
  private dialog dialogHandle_39;
  private variable NumberOfTipsRequired;
  MECC::TraceComment(Translate("***********************************************************************************************************************************************************\n******************** SUBMETHOD START:  PROCESS 4 - NORMALIZATION AND POOLING FOR ENRICHMENT ********************\n***********************************************************************************************************************************************************"));
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(Translate("TruSeq RNA Access Library Preparation"));
  AswStatusDialog::SetStatusText(Translate("Process4: Normalize and Pool for Enrichment"));
  NumberOfTipsRequired = NumberOfSamples * 1;
  NumberOfTipsRequired = NumberOfTipsRequired + 8;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the RAH1 plate..............\n****************************************************************"));
  AswStatusDialog::AppendText(Translate("...Now Making RAH1"));
  MECC::TraceComment(Translate("****** add RSB to pooled wells to bring final volume up to 45uL"));
  AswStatusDialog::AppendText(Translate("   Adding RSB to pooled wells to bring final total volume up to 45uL"));
  var_ArrayIndex = 1;
  ML_STAR.HSP_NormPool_RSB.SetCount(var_NumPooledWells);
  {
    loopCounter_Pool = 0;
    while (
       (ML_STAR.HSP_NormPool_RSB.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.HSP_NormPool_RSB, 1, ML_STAR.MlStar50ulTipWithFilter, 1, ML_STAR._RSB, 1);
      loopCounter_Pool = loopCounter_Pool + 1;
      if (loopCounter_Pool == 1)
      {
        onerror goto errLabel_40 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_40 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          TRUSEQPROCESSES::ErrorHandling_TipPickup(ML_STAR, ML_STAR.MlStar50ulTipWithFilter);
        }   /* end if from skip handler if no error */
      }
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      var_ArrayIndex = var_ArrayIndex + 8;
      if (
         (ML_STAR.HSP_NormPool_RSB.GetCurrentPosition() > 0 && ML_STAR.HSP_NormPool_RSB.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.HSP_NormPool_RSB.SetMax(ML_STAR.HSP_NormPool_RSB.GetTotal());
    ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
    ML_STAR._RSB.SetMax(ML_STAR._RSB.GetTotal());
    ML_STAR.HSP_NormPool_RSB.SetCurrentPosition(1);
    ML_STAR._RSB.SetCurrentPosition(1);
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("****** add sample to pooled well"));
  AswStatusDialog::AppendText(Translate("   Adding samples to pooled wells"));
  var_ArrayIndex = 1;
  {
    loopCounter_Pool = 0;
    while (
       (ML_STAR.HSP_NormPool_Source.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.HSP_NormPool_Dest, 1, ML_STAR.HSP_NormPool_Source, 1, ML_STAR.MlStar50ulTipWithFilter, 1);
      loopCounter_Pool = loopCounter_Pool + 1;
      onerror goto errLabel_41 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      errLabel_41 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        TRUSEQPROCESSES::ErrorHandling_TipPickup(ML_STAR, ML_STAR.MlStar50ulTipWithFilter);
      }   /* end if from skip handler if no error */
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      var_ArrayIndex = var_ArrayIndex + 8;
      if (
         (ML_STAR.HSP_NormPool_Source.GetCurrentPosition() > 0 && ML_STAR.HSP_NormPool_Source.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.HSP_NormPool_Dest.SetMax(ML_STAR.HSP_NormPool_Dest.GetTotal());
    ML_STAR.HSP_NormPool_Source.SetMax(ML_STAR.HSP_NormPool_Source.GetTotal());
    ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
    ML_STAR.HSP_NormPool_Dest.SetCurrentPosition(1);
    ML_STAR.HSP_NormPool_Source.SetCurrentPosition(1);
  }
  TRUSEQPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  AswStatusDialog::AppendText(Translate("...Process 4 Complete"));
  STCC::ResetFilterSequences();
  STCC::AddFilterSequence(ML_STAR, ML_STAR.HSP_NormPool_Source);
  {
    variable _FilterIdsArray_42[];
    variable _ColumnIdsArray_42[];
    variable _ColumnNamesArray_42[];
    variable _ExperimentsArray_42[];
    _FilterIdsArray_42.SetSize(0);
    _ColumnNamesArray_42.SetSize(14);
    _ColumnIdsArray_42.SetSize(14);
    _ColumnNamesArray_42.SetAt(0, "RecordId");
    _ColumnIdsArray_42.SetAt(0, 0);
    _ColumnNamesArray_42.SetAt(1, "TRackBC");
    _ColumnIdsArray_42.SetAt(1, 1);
    _ColumnNamesArray_42.SetAt(2, "TLabwareId");
    _ColumnIdsArray_42.SetAt(2, 2);
    _ColumnNamesArray_42.SetAt(3, "TPositionId");
    _ColumnIdsArray_42.SetAt(3, 3);
    _ColumnNamesArray_42.SetAt(4, "TPositionBC");
    _ColumnIdsArray_42.SetAt(4, 4);
    _ColumnNamesArray_42.SetAt(5, "TStatusSummary");
    _ColumnIdsArray_42.SetAt(5, 5);
    _ColumnNamesArray_42.SetAt(6, "TSumStateDescription");
    _ColumnIdsArray_42.SetAt(6, 6);
    _ColumnNamesArray_42.SetAt(7, "TVolume");
    _ColumnIdsArray_42.SetAt(7, 7);
    _ColumnNamesArray_42.SetAt(8, "SRackBC");
    _ColumnIdsArray_42.SetAt(8, 8);
    _ColumnNamesArray_42.SetAt(9, "SLabwareId");
    _ColumnIdsArray_42.SetAt(9, 9);
    _ColumnNamesArray_42.SetAt(10, "SPositionId");
    _ColumnIdsArray_42.SetAt(10, 10);
    _ColumnNamesArray_42.SetAt(11, "SPositionBC");
    _ColumnIdsArray_42.SetAt(11, 11);
    _ColumnNamesArray_42.SetAt(12, "ActionDateTime");
    _ColumnIdsArray_42.SetAt(12, 12);
    _ColumnNamesArray_42.SetAt(13, "UserName");
    _ColumnIdsArray_42.SetAt(13, 13);
    _ExperimentsArray_42.SetSize(0);
    STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.HSP_NormPool_Dest, 3, _FilterIdsArray_42, 0, _ColumnIdsArray_42, _ColumnNamesArray_42, _ExperimentsArray_42, "NormPool_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
  }
  if (AnswerStopPoint == 4)
  {
    MECC::TraceComment(Translate("************************** Stopping Point:  Normalize and Pool for enrichment now complete **************************"));
    dialogHandle_38.SetOutput(Translate("This is not a safe stopping point."), Translate("\n\nIllumina recommends that you proceed to the next step."));
    dialogHandle_38.ShowOutput(Translate("Warning"), hslOKOnly | hslInformation | hslDefButton1, 3600);
  }
  else
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    dialogHandle_39.SetOutput(Translate("Please remove TSP1 sample plate from Position 4 on Tip Plate Carrier"), "\n", Translate(""), "\n", Translate("Leave RAH1 plate with pooled sample (45uL/well) in Position 3"), "\n", Translate(""), "\n", Translate("Select OK to continue to next process"));
    dialogHandle_39.ShowOutput(Translate("User response required"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  PROCESS 4 - NORMALIZATION AND POOLING FOR ENRICHMENT ********************"));
}

private function EmailNotify( variable To, variable Subject, variable Body ) void {
  private variable ReturnEmailSuccess;
  MECC::TraceComment(Translate("********** Submethod:  EmailNotify **********"));
  if (EmailNotifyFlag == 1)
  {
    if (SimOn == 0)
    {
      ReturnEmailSuccess = Util::SendEMail(To, Subject, Body);
      Trace ("***** ReturnEmailSuccess:  ", ReturnEmailSuccess);
    }
  }
  MECC::TraceComment(Translate("********** Submethod Complete:  EmailNotify **********"));
}

private function NormalizePool_Calc( variable i_var_PoolWellID, variable & i_arr_Pool_SourceWell[], variable & i_arr_Pool_SampleVol[], variable & i_arr_Pool_Index[], variable & i_arr_Pool_SampleType[], variable & o_var_Pool_Count ) void {
  private variable var_Pool_Count;
  private dialog dialogHandle_43;
  private variable var_Return;
  private variable var_Pool_TotalSampleVol;
  private variable loopCounter_PoolCount;
  private variable var_Pool_SampleVol;
  private variable var_Pool_SourceWell;
  private variable var_Pool_BufferVol;
  private dialog dialogHandle2;
  private variable var_Pool_IndexDupeCheck;
  private variable arr_Pool_IndexDupeCheck[];
  private dialog dialogHandle_44;
  private variable var_CheckSampleType1;
  private variable var_CheckSampleType2;
  private variable loopCounter_CheckSampleType;
  private dialog dialogHandle_45;
  private dialog dialogHandle_46;
  o_var_Pool_Count = 0;
  var_Pool_Count=i_arr_Pool_SampleVol.GetSize();
  o_var_Pool_Count = var_Pool_Count;
  if (var_Pool_Count == 0)
  {
    var_Pool_ZeroFlag = 1;
    return;
  }
  else
  {
    if (var_Pool_Count < 4)
    {
      dialogHandle_43.SetOutput(Translate("There are less than 4 samples to pool for Pool Well "), i_var_PoolWellID, "\n", Translate(""), "\n", Translate("Pooling at less than 4-plex results in the inability to process the number of samples supported by the kit"), "\n", Translate(""), "\n", Translate("Select Yes to proceed or No to abort"));
      var_Return = dialogHandle_43.ShowOutput(Translate("Alert!"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
      if (var_Return == 7)
      {
        abort;
      }
    }
    else
    {
      if (var_Pool_Count > 4)
      {
        dialogHandle_44.SetOutput(Translate("There are more than 4 samples to pool for Pool Well "), i_var_PoolWellID, "\n", Translate(""), "\n", Translate("Illumina does not reccomend pooling more than 4 samples"), "\n", Translate(""), "\n", Translate("Please update worklist accordingly.  Run will now abort."));
        var_Return = dialogHandle_44.ShowOutput(Translate("Error!"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }
    }
  }
  var_NumPooledWells = var_NumPooledWells + 1;
  var_Pool_TotalSampleVol = 0;
  {
    for(loopCounter_PoolCount = 0; loopCounter_PoolCount < var_Pool_Count;)
    {
      loopCounter_PoolCount = loopCounter_PoolCount + 1;
      var_Pool_SampleVol=i_arr_Pool_SampleVol.GetAt(loopCounter_PoolCount-1);
      arr_SampleVol.AddAsLast(var_Pool_SampleVol);
      var_Pool_TotalSampleVol = var_Pool_TotalSampleVol + var_Pool_SampleVol;
      var_Pool_SourceWell=i_arr_Pool_SourceWell.GetAt(loopCounter_PoolCount-1);
      SeqAdd(ML_STAR.HSP_NormPool_Source, Translate("HSP_Pipette"), var_Pool_SourceWell);
      SeqAdd(ML_STAR.HSP_NormPool_Dest, Translate("HSP_Pipette2"), i_var_PoolWellID);
    }
  }
  if (var_Pool_TotalSampleVol > 45)
  {
    dialogHandle2.SetOutput(Translate("The total volume of samples to pool for Pool Well "), i_var_PoolWellID, Translate(" is "), var_Pool_TotalSampleVol, Translate(", which is >45uL required for subsequent enrichment process"), "\n", Translate(""), "\n", Translate("Please correct Pool Well scheme in worklist accordingly.  Run will now abort."));
    dialogHandle2.ShowOutput(Translate("Error!"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    abort;
  }
  else
  {
    var_Pool_BufferVol = 45 - var_Pool_TotalSampleVol;
    arr_BufferVol.AddAsLast(var_Pool_BufferVol);
  }
  arr_Pool_IndexDupeCheck.SetSize(0);
  arr_Pool_IndexDupeCheck = HSLExtensions::Array::ContainsDuplicates(i_arr_Pool_Index);
  var_Pool_IndexDupeCheck=arr_Pool_IndexDupeCheck.GetSize();
  if (var_Pool_IndexDupeCheck > 0)
  {
    dialogHandle_45.SetOutput(Translate("There is a duplicate Index in Pool Well "), i_var_PoolWellID, "\n", Translate(""), "\n", Translate("Illumina reccomends using unique indexes in a pooled well to resolve samples during sequencing"), "\n", Translate(""), "\n", Translate("Please correct Pool Well scheme in worklist accordingly.  Run will now abort."));
    dialogHandle_45.ShowOutput(Translate("Error!"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    abort;
  }
  var_CheckSampleType1 = Translate("");
  var_CheckSampleType2 = Translate("");
  {
    for(loopCounter_CheckSampleType = 0; loopCounter_CheckSampleType < var_Pool_Count;)
    {
      loopCounter_CheckSampleType = loopCounter_CheckSampleType + 1;
      var_CheckSampleType1=i_arr_Pool_SampleType.GetAt(loopCounter_CheckSampleType-1);
      if (loopCounter_CheckSampleType > 1)
      {
        if (var_CheckSampleType1 != var_CheckSampleType2)
        {
          dialogHandle_46.SetOutput(Translate("There are mixed sample types in Pool Well "), i_var_PoolWellID, "\n", Translate(""), "\n", Translate("Illumina recommends using the same sample type in a pooled well for the most even representation in the pool."), "\n", Translate(""), "\n", Translate("Please select Yes to continue process, or select No to Abort and then correct Pool Well scheme in worklist accordingly."));
          var_Return = dialogHandle_46.ShowOutput(Translate("Warning!"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
          if (var_Return == 7)
          {
            abort;
          }
        }
      }
      var_CheckSampleType2 = var_CheckSampleType1;
    }
  }
}

private function NormalizePool_Prep(  ) void {
  private variable var_Pool_A1_Count;
  private variable var_Pool_A2_Count;
  private variable var_Pool_A3_Count;
  private variable var_Pool_D1_Count;
  private variable var_Pool_D2_Count;
  private variable var_TargetMassPerSample_Index;
  private variable var_Pool_G1_Count;
  private variable var_Pool_G2_Count;
  private variable var_Pool_D3_Count;
  private variable var_TargetMassPerSample;
  private variable File_Index;
  private variable loopCounter_File;
  private variable var_Pool_G3_Count;
  private variable var_Pool_B1_Count;
  private variable var_Pool_E1_Count;
  private variable var_Pool_B2_Count;
  private variable var_Pool_B3_Count;
  private variable var_Pool_E2_Count;
  private variable var_Pool_H2_Count;
  private variable var_Pool_H1_Count;
  private variable var_Pool_E3_Count;
  private variable File_WellID_Source;
  private variable var_Pool_H3_Count;
  private variable retValueDialog;
  private variable var_Pool_SampleVol;
  private variable var_Pool_C1_Count;
  private variable File_WellID_Pool;
  private variable var_Pool_C2_Count;
  private variable File_Normalization;
  private variable var_Pool_F1_Count;
  private variable var_Pool_F2_Count;
  private variable var_Pool_C3_Count;
  private variable var_Pool_F3_Count;
  private variable File_Sample_ng_uL;
  private file NormPoolWorklist;
  private variable arr_Pool_F3_SourceWell[];
  private variable arr_Pool_A1_Index[];
  private variable arr_Index_File[];
  private variable arr_Pool_D1_SampleVol[];
  private variable arr_Pool_C3_SourceWell[];
  private variable arr_Pool_A2_SourceWell[];
  private variable arr_Pool_D2_SourceWell[];
  private variable arr_Pool_C3_SampleVol[];
  private variable arr_Pool_G2_SourceWell[];
  private variable arr_Pool_A2_Index[];
  private variable arr_Pool_E1_SourceWell[];
  private variable arr_Pool_D1_Index[];
  private variable arr_Pool_B1_SourceWell[];
  private variable arr_Pool_D2_Index[];
  private variable arr_Pool_A3_Index[];
  private variable arr_Pool_H1_SampleVol[];
  private variable arr_Pool_B2_SampleVol[];
  private variable arr_Pool_H1_SourceWell[];
  private variable arr_Pool_G1_Index[];
  private variable arr_Pool_A1_SampleVol[];
  private variable arr_Pool_G2_Index[];
  private variable arr_Pool_D3_Index[];
  private variable arr_Pool_F2_SampleVol[];
  private variable arr_Pool_G3_Index[];
  private variable arr_Pool_G3_SampleVol[];
  private variable arr_Pool_E1_SampleVol[];
  private variable arr_Pool_A3_SourceWell[];
  private variable arr_Pool_D3_SourceWell[];
  private variable arr_Pool_D3_SampleVol[];
  private variable arr_Pool_B1_Index[];
  private variable arr_Pool_G3_SourceWell[];
  private variable arr_Pool_C2_SampleVol[];
  private variable arr_Pool_B2_Index[];
  private variable arr_Pool_H2_SourceWell[];
  private variable arr_Pool_B2_SourceWell[];
  private variable arr_Pool_E2_SourceWell[];
  private variable arr_Pool_B3_Index[];
  private variable arr_Pool_E2_Index[];
  private variable arr_Pool_E1_Index[];
  private variable arr_Pool_B1_SampleVol[];
  private variable arr_Pool_C1_SourceWell[];
  private variable arr_Pool_F1_SourceWell[];
  private variable arr_Pool_H3_SampleVol[];
  private variable arr_Pool_H1_Index[];
  private variable arr_Pool_E3_Index[];
  private variable arr_Pool_G2_SampleVol[];
  private variable arr_Pool_A3_SampleVol[];
  private variable arr_PoolWell_File[];
  private variable arr_Pool_F1_SampleVol[];
  private variable arr_Pool_H3_Index[];
  private variable arr_Pool_H2_Index[];
  private variable arr_Pool_E3_SampleVol[];
  private variable arr_Pool_B3_SourceWell[];
  private variable arr_Pool_E3_SourceWell[];
  private variable arr_Pool_C1_SampleVol[];
  private variable arr_Pool_D2_SampleVol[];
  private variable arr_Pool_F2_SourceWell[];
  private variable arr_Pool_H3_SourceWell[];
  private variable arr_Pool_C1_Index[];
  private variable arr_Pool_C2_SourceWell[];
  private variable arr_SourceWell_File[];
  private variable arr_ng_uL_File[];
  private variable arr_Pool_D1_SourceWell[];
  private variable arr_Pool_A1_SourceWell[];
  private variable arr_Pool_G1_SourceWell[];
  private variable arr_Pool_C2_Index[];
  private variable arr_Pool_A2_SampleVol[];
  private variable arr_Pool_F2_Index[];
  private variable arr_Pool_B3_SampleVol[];
  private variable arr_Pool_C3_Index[];
  private variable arr_Pool_H2_SampleVol[];
  private variable arr_Pool_F1_Index[];
  private variable arr_Pool_F3_Index[];
  private variable arr_Pool_G1_SampleVol[];
  private variable arr_Pool_E2_SampleVol[];
  private variable arr_Pool_F3_SampleVol[];
  private dialog dialogHandle_47;
  private variable arr_SampleType_File[];
  private variable arr_Pool_B1_SampleType[];
  private variable arr_Pool_A1_SampleType[];
  private variable arr_Pool_E1_SampleType[];
  private variable arr_Pool_F1_SampleType[];
  private variable arr_Pool_C1_SampleType[];
  private variable arr_Pool_G1_SampleType[];
  private variable arr_Pool_D1_SampleType[];
  private variable arr_Pool_D2_SampleType[];
  private variable arr_Pool_A2_SampleType[];
  private variable arr_Pool_H1_SampleType[];
  private variable arr_Pool_B2_SampleType[];
  private variable arr_Pool_C2_SampleType[];
  private variable arr_Pool_E2_SampleType[];
  private variable arr_Pool_F2_SampleType[];
  private variable arr_Pool_G2_SampleType[];
  private variable arr_Pool_A3_SampleType[];
  private variable arr_Pool_H2_SampleType[];
  private variable arr_Pool_F3_SampleType[];
  private variable arr_Pool_C3_SampleType[];
  private variable arr_Pool_G3_SampleType[];
  private variable arr_Pool_D3_SampleType[];
  private variable arr_Pool_H3_SampleType[];
  private variable arr_Pool_E3_SampleType[];
  private variable arr_Pool_B3_SampleType[];
  private variable File_SampleType;
  private dialog dialogHandle_48;
  private variable var_Worklist_LineNum;
  private dialog dialogHandle_49;
  private variable loopCounter_BufferTotalCalc;
  private variable var_Pool_BufferVol;
  private dialog customDialog_50;
  private dialog customDialog_51;
  private variable loopCounter_Infinite;
  MECC::TraceComment(Translate("********** Submethod:  NormalizePool_Prep **********"));
  {
    loopCounter_Infinite = 0;
    while (1 == 1)
    {
      loopCounter_Infinite = loopCounter_Infinite + 1;
      customDialog_51.InitCustomDialog("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");
      customDialog_51.ShowCustomDialog();
      retValueDialog = customDialog_51.GetCustomDialogProperty( "ReturnValue" );
      File_Normalization = customDialog_51.GetCustomDialogProperty( "path1.Path" );
      var_TargetMassPerSample_Index = customDialog_51.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
      if (retValueDialog == 2)
      {
        abort;
      }
      else
      {
        if (retValueDialog == 6)
        {
          customDialog_50.InitCustomDialog("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");
          customDialog_50.ShowCustomDialog();
        }
        else
        {
          if (retValueDialog == 1)
          {
            break;
          }
        }
      }
    }
  }
  if (var_TargetMassPerSample_Index == 1)
  {
    var_TargetMassPerSample = 100;
  }
  else
  {
    var_TargetMassPerSample = 200;
  }
  Trace ("***** Normalize and Pool for Enrichment Worklist File selected:  ", File_Normalization);
  Trace ("***** Target mass of each DNA library for pooling selected (ng):  ", var_TargetMassPerSample);
  arr_SourceWell_File.SetSize(0);
  arr_ng_uL_File.SetSize(0);
  arr_PoolWell_File.SetSize(0);
  arr_Index_File.SetSize(0);
  arr_SampleType_File.SetSize(0);
  arr_Pool_A1_SourceWell.SetSize(0);
  arr_Pool_A1_SampleVol.SetSize(0);
  arr_Pool_A1_Index.SetSize(0);
  arr_Pool_A1_SampleType.SetSize(0);
  arr_Pool_B1_SourceWell.SetSize(0);
  arr_Pool_B1_SampleVol.SetSize(0);
  arr_Pool_B1_Index.SetSize(0);
  arr_Pool_B1_SampleType.SetSize(0);
  arr_Pool_C1_SourceWell.SetSize(0);
  arr_Pool_C1_SampleVol.SetSize(0);
  arr_Pool_C1_Index.SetSize(0);
  arr_Pool_C1_SampleType.SetSize(0);
  arr_Pool_D1_SourceWell.SetSize(0);
  arr_Pool_D1_SampleVol.SetSize(0);
  arr_Pool_D1_Index.SetSize(0);
  arr_Pool_D1_SampleType.SetSize(0);
  arr_Pool_E1_SourceWell.SetSize(0);
  arr_Pool_E1_SampleVol.SetSize(0);
  arr_Pool_E1_Index.SetSize(0);
  arr_Pool_E1_SampleType.SetSize(0);
  arr_Pool_F1_SourceWell.SetSize(0);
  arr_Pool_F1_SampleVol.SetSize(0);
  arr_Pool_F1_Index.SetSize(0);
  arr_Pool_F1_SampleType.SetSize(0);
  arr_Pool_G1_SourceWell.SetSize(0);
  arr_Pool_G1_SampleVol.SetSize(0);
  arr_Pool_G1_Index.SetSize(0);
  arr_Pool_G1_SampleType.SetSize(0);
  arr_Pool_H1_SourceWell.SetSize(0);
  arr_Pool_H1_SampleVol.SetSize(0);
  arr_Pool_H1_Index.SetSize(0);
  arr_Pool_H1_SampleType.SetSize(0);
  arr_Pool_A2_SourceWell.SetSize(0);
  arr_Pool_A2_SampleVol.SetSize(0);
  arr_Pool_A2_Index.SetSize(0);
  arr_Pool_A2_SampleType.SetSize(0);
  arr_Pool_B2_SourceWell.SetSize(0);
  arr_Pool_B2_SampleVol.SetSize(0);
  arr_Pool_B2_Index.SetSize(0);
  arr_Pool_B2_SampleType.SetSize(0);
  arr_Pool_C2_SourceWell.SetSize(0);
  arr_Pool_C2_SampleVol.SetSize(0);
  arr_Pool_C2_Index.SetSize(0);
  arr_Pool_C2_SampleType.SetSize(0);
  arr_Pool_D2_SourceWell.SetSize(0);
  arr_Pool_D2_SampleVol.SetSize(0);
  arr_Pool_D2_Index.SetSize(0);
  arr_Pool_D2_SampleType.SetSize(0);
  arr_Pool_E2_SourceWell.SetSize(0);
  arr_Pool_E2_SampleVol.SetSize(0);
  arr_Pool_E2_Index.SetSize(0);
  arr_Pool_E2_SampleType.SetSize(0);
  arr_Pool_F2_SourceWell.SetSize(0);
  arr_Pool_F2_SampleVol.SetSize(0);
  arr_Pool_F2_Index.SetSize(0);
  arr_Pool_F2_SampleType.SetSize(0);
  arr_Pool_G2_SourceWell.SetSize(0);
  arr_Pool_G2_SampleVol.SetSize(0);
  arr_Pool_G2_Index.SetSize(0);
  arr_Pool_G2_SampleType.SetSize(0);
  arr_Pool_H2_SourceWell.SetSize(0);
  arr_Pool_H2_SampleVol.SetSize(0);
  arr_Pool_H2_Index.SetSize(0);
  arr_Pool_H2_SampleType.SetSize(0);
  arr_Pool_A3_SourceWell.SetSize(0);
  arr_Pool_A3_SampleVol.SetSize(0);
  arr_Pool_A3_Index.SetSize(0);
  arr_Pool_A3_SampleType.SetSize(0);
  arr_Pool_B3_SourceWell.SetSize(0);
  arr_Pool_B3_SampleVol.SetSize(0);
  arr_Pool_B3_Index.SetSize(0);
  arr_Pool_B3_SampleType.SetSize(0);
  arr_Pool_C3_SourceWell.SetSize(0);
  arr_Pool_C3_SampleVol.SetSize(0);
  arr_Pool_C3_Index.SetSize(0);
  arr_Pool_C3_SampleType.SetSize(0);
  arr_Pool_D3_SourceWell.SetSize(0);
  arr_Pool_D3_SampleVol.SetSize(0);
  arr_Pool_D3_Index.SetSize(0);
  arr_Pool_D3_SampleType.SetSize(0);
  arr_Pool_E3_SourceWell.SetSize(0);
  arr_Pool_E3_SampleVol.SetSize(0);
  arr_Pool_E3_Index.SetSize(0);
  arr_Pool_E3_SampleType.SetSize(0);
  arr_Pool_F3_SourceWell.SetSize(0);
  arr_Pool_F3_SampleVol.SetSize(0);
  arr_Pool_F3_Index.SetSize(0);
  arr_Pool_F3_SampleType.SetSize(0);
  arr_Pool_G3_SourceWell.SetSize(0);
  arr_Pool_G3_SampleVol.SetSize(0);
  arr_Pool_G3_Index.SetSize(0);
  arr_Pool_G3_SampleType.SetSize(0);
  arr_Pool_H3_SourceWell.SetSize(0);
  arr_Pool_H3_SampleVol.SetSize(0);
  arr_Pool_H3_Index.SetSize(0);
  arr_Pool_H3_SampleType.SetSize(0);
  arr_SourceWell.SetSize(0);
  arr_SampleVol.SetSize(0);
  arr_BufferVol.SetSize(0);
  NormPoolWorklist.AddField("SourceWell", File_WellID_Source, hslString, 255);
  NormPoolWorklist.AddField("ng/uL", File_Sample_ng_uL, hslFloat);
  NormPoolWorklist.AddField("PoolWell", File_WellID_Pool, hslString, 255);
  NormPoolWorklist.AddField("Index", File_Index, hslInteger);
  NormPoolWorklist.AddField("SampleType", File_SampleType, hslString, 255);
  if( 0 == NormPoolWorklist.Open(File_Normalization + " " + "Sheet1$", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, File_Normalization, "HxMetEdCompCmd");
  }
  {
    loopCounter_File = 0;
    while (
       (NormPoolWorklist.Eof() == 0)
    )
    {
      loopCounter_File = loopCounter_File + 1;
      if( 0 == NormPoolWorklist.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      var_Pool_SampleVol = var_TargetMassPerSample / (File_Sample_ng_uL * 1.0);
      var_Pool_SampleVol = MthRound(var_Pool_SampleVol, 1);
      if (var_Pool_SampleVol < 1.0)
      {
        var_Worklist_LineNum = loopCounter_File + 1;
        dialogHandle_49.SetOutput(Translate("The sample volume to be pooled is too small (<1.0uL)"), "\n", Translate(""), "\n", Translate("Worklist line # "), var_Worklist_LineNum, "\n", Translate(""), "\n", Translate("SourceWell: "), File_WellID_Source, "\n", File_Sample_ng_uL, Translate(" ng/uL"), "\n", Translate(""), "\n", Translate("Calculated sample volume to transfer based on "), var_TargetMassPerSample, Translate(" ng of each DNA library for pooling: "), var_Pool_SampleVol, Translate(" uL"), "\n", Translate(""), "\n", Translate("Please dilute sample first and update worklist accordingly"), "\n", Translate(""), "\n", Translate("Run will now abort..."));
        dialogHandle_49.ShowOutput(Translate("Error!"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }
      if (File_WellID_Pool == "A1")
      {
        arr_Pool_A1_SourceWell.AddAsLast(File_WellID_Source);
        arr_Pool_A1_SampleVol.AddAsLast(var_Pool_SampleVol);
        arr_Pool_A1_Index.AddAsLast(File_Index);
        arr_Pool_A1_SampleType.AddAsLast(File_SampleType);
      }
      else
      {
        if (File_WellID_Pool == "B1")
        {
          arr_Pool_B1_SourceWell.AddAsLast(File_WellID_Source);
          arr_Pool_B1_SampleVol.AddAsLast(var_Pool_SampleVol);
          arr_Pool_B1_Index.AddAsLast(File_Index);
          arr_Pool_B1_SampleType.AddAsLast(File_SampleType);
        }
        else
        {
          if (File_WellID_Pool == "C1")
          {
            arr_Pool_C1_SourceWell.AddAsLast(File_WellID_Source);
            arr_Pool_C1_SampleVol.AddAsLast(var_Pool_SampleVol);
            arr_Pool_C1_Index.AddAsLast(File_Index);
            arr_Pool_C1_SampleType.AddAsLast(File_SampleType);
          }
          else
          {
            if (File_WellID_Pool == "D1")
            {
              arr_Pool_D1_SourceWell.AddAsLast(File_WellID_Source);
              arr_Pool_D1_SampleVol.AddAsLast(var_Pool_SampleVol);
              arr_Pool_D1_Index.AddAsLast(File_Index);
              arr_Pool_D1_SampleType.AddAsLast(File_SampleType);
            }
            else
            {
              if (File_WellID_Pool == "E1")
              {
                arr_Pool_E1_SourceWell.AddAsLast(File_WellID_Source);
                arr_Pool_E1_SampleVol.AddAsLast(var_Pool_SampleVol);
                arr_Pool_E1_Index.AddAsLast(File_Index);
                arr_Pool_E1_SampleType.AddAsLast(File_SampleType);
              }
              else
              {
                if (File_WellID_Pool == "F1")
                {
                  arr_Pool_F1_SourceWell.AddAsLast(File_WellID_Source);
                  arr_Pool_F1_SampleVol.AddAsLast(var_Pool_SampleVol);
                  arr_Pool_F1_Index.AddAsLast(File_Index);
                  arr_Pool_F1_SampleType.AddAsLast(File_SampleType);
                }
                else
                {
                  if (File_WellID_Pool == "G1")
                  {
                    arr_Pool_G1_SourceWell.AddAsLast(File_WellID_Source);
                    arr_Pool_G1_SampleVol.AddAsLast(var_Pool_SampleVol);
                    arr_Pool_G1_Index.AddAsLast(File_Index);
                    arr_Pool_G1_SampleType.AddAsLast(File_SampleType);
                  }
                  else
                  {
                    if (File_WellID_Pool == "H1")
                    {
                      arr_Pool_H1_SourceWell.AddAsLast(File_WellID_Source);
                      arr_Pool_H1_SampleVol.AddAsLast(var_Pool_SampleVol);
                      arr_Pool_H1_Index.AddAsLast(File_Index);
                      arr_Pool_H1_SampleType.AddAsLast(File_SampleType);
                    }
                    else
                    {
                      if (File_WellID_Pool == "A2")
                      {
                        arr_Pool_A2_SourceWell.AddAsLast(File_WellID_Source);
                        arr_Pool_A2_SampleVol.AddAsLast(var_Pool_SampleVol);
                        arr_Pool_A2_Index.AddAsLast(File_Index);
                        arr_Pool_A2_SampleType.AddAsLast(File_SampleType);
                      }
                      else
                      {
                        if (File_WellID_Pool == "B2")
                        {
                        arr_Pool_B2_SourceWell.AddAsLast(File_WellID_Source);
                        arr_Pool_B2_SampleVol.AddAsLast(var_Pool_SampleVol);
                        arr_Pool_B2_Index.AddAsLast(File_Index);
                        arr_Pool_B2_SampleType.AddAsLast(File_SampleType);
                        }
                        else
                        {
                        if (File_WellID_Pool == "C2")
                        {
                        arr_Pool_C2_SourceWell.AddAsLast(File_WellID_Source);
                        arr_Pool_C2_SampleVol.AddAsLast(var_Pool_SampleVol);
                        arr_Pool_C2_Index.AddAsLast(File_Index);
                        arr_Pool_C2_SampleType.AddAsLast(File_SampleType);
                        }
                        else
                        {
                        if (File_WellID_Pool == "D2")
                        {
                        arr_Pool_D2_SourceWell.AddAsLast(File_WellID_Source);
                        arr_Pool_D2_SampleVol.AddAsLast(var_Pool_SampleVol);
                        arr_Pool_D2_Index.AddAsLast(File_Index);
                        arr_Pool_D2_SampleType.AddAsLast(File_SampleType);
                        }
                        else
                        {
                        if (File_WellID_Pool == "E2")
                        {
                        arr_Pool_E2_SourceWell.AddAsLast(File_WellID_Source);
                        arr_Pool_E2_SampleVol.AddAsLast(var_Pool_SampleVol);
                        arr_Pool_E2_Index.AddAsLast(File_Index);
                        arr_Pool_E2_SampleType.AddAsLast(File_SampleType);
                        }
                        else
                        {
                        if (File_WellID_Pool == "F2")
                        {
                        arr_Pool_F2_SourceWell.AddAsLast(File_WellID_Source);
                        arr_Pool_F2_SampleVol.AddAsLast(var_Pool_SampleVol);
                        arr_Pool_F2_Index.AddAsLast(File_Index);
                        arr_Pool_F2_SampleType.AddAsLast(File_SampleType);
                        }
                        else
                        {
                        if (File_WellID_Pool == "G2")
                        {
                        arr_Pool_G2_SourceWell.AddAsLast(File_WellID_Source);
                        arr_Pool_G2_SampleVol.AddAsLast(var_Pool_SampleVol);
                        arr_Pool_G2_Index.AddAsLast(File_Index);
                        arr_Pool_G2_SampleType.AddAsLast(File_SampleType);
                        }
                        else
                        {
                        if (File_WellID_Pool == "H2")
                        {
                        arr_Pool_H2_SourceWell.AddAsLast(File_WellID_Source);
                        arr_Pool_H2_SampleVol.AddAsLast(var_Pool_SampleVol);
                        arr_Pool_H2_Index.AddAsLast(File_Index);
                        arr_Pool_H2_SampleType.AddAsLast(File_SampleType);
                        }
                        else
                        {
                        if (File_WellID_Pool == "A3")
                        {
                        arr_Pool_A3_SourceWell.AddAsLast(File_WellID_Source);
                        arr_Pool_A3_SampleVol.AddAsLast(var_Pool_SampleVol);
                        arr_Pool_A3_Index.AddAsLast(File_Index);
                        arr_Pool_A3_SampleType.AddAsLast(File_SampleType);
                        }
                        else
                        {
                        if (File_WellID_Pool == "B3")
                        {
                        arr_Pool_B3_SourceWell.AddAsLast(File_WellID_Source);
                        arr_Pool_B3_SampleVol.AddAsLast(var_Pool_SampleVol);
                        arr_Pool_B3_Index.AddAsLast(File_Index);
                        arr_Pool_B3_SampleType.AddAsLast(File_SampleType);
                        }
                        else
                        {
                        if (File_WellID_Pool == "C3")
                        {
                        arr_Pool_C3_SourceWell.AddAsLast(File_WellID_Source);
                        arr_Pool_C3_SampleVol.AddAsLast(var_Pool_SampleVol);
                        arr_Pool_C3_Index.AddAsLast(File_Index);
                        arr_Pool_C3_SampleType.AddAsLast(File_SampleType);
                        }
                        else
                        {
                        if (File_WellID_Pool == "D3")
                        {
                        arr_Pool_D3_SourceWell.AddAsLast(File_WellID_Source);
                        arr_Pool_D3_SampleVol.AddAsLast(var_Pool_SampleVol);
                        arr_Pool_D3_Index.AddAsLast(File_Index);
                        arr_Pool_D3_SampleType.AddAsLast(File_SampleType);
                        }
                        else
                        {
                        if (File_WellID_Pool == "E3")
                        {
                        arr_Pool_E3_SourceWell.AddAsLast(File_WellID_Source);
                        arr_Pool_E3_SampleVol.AddAsLast(var_Pool_SampleVol);
                        arr_Pool_E3_Index.AddAsLast(File_Index);
                        arr_Pool_E3_SampleType.AddAsLast(File_SampleType);
                        }
                        else
                        {
                        if (File_WellID_Pool == "F3")
                        {
                        arr_Pool_F3_SourceWell.AddAsLast(File_WellID_Source);
                        arr_Pool_F3_SampleVol.AddAsLast(var_Pool_SampleVol);
                        arr_Pool_F3_Index.AddAsLast(File_Index);
                        arr_Pool_F3_SampleType.AddAsLast(File_SampleType);
                        }
                        else
                        {
                        if (File_WellID_Pool == "G3")
                        {
                        arr_Pool_G3_SourceWell.AddAsLast(File_WellID_Source);
                        arr_Pool_G3_SampleVol.AddAsLast(var_Pool_SampleVol);
                        arr_Pool_G3_Index.AddAsLast(File_Index);
                        arr_Pool_G3_SampleType.AddAsLast(File_SampleType);
                        }
                        else
                        {
                        if (File_WellID_Pool == "H3")
                        {
                        arr_Pool_H3_SourceWell.AddAsLast(File_WellID_Source);
                        arr_Pool_H3_SampleVol.AddAsLast(var_Pool_SampleVol);
                        arr_Pool_H3_Index.AddAsLast(File_Index);
                        arr_Pool_H3_SampleType.AddAsLast(File_SampleType);
                        }
                        else
                        {
                        var_Worklist_LineNum = loopCounter_File + 1;
                        dialogHandle_48.SetOutput(Translate("There is a problem with the worklist."), "\n", Translate(""), "\n", Translate("Worklist line # "), var_Worklist_LineNum, Translate(" does not contain a valid Well ID for pooling."), "\n", Translate(""), "\n", Translate("Please correct worklist and then run again.  Run will now abort..."));
                        dialogHandle_48.ShowOutput(Translate("Error!"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        abort;
                        }
                        }
                        }
                        }
                        }
                        }
                        }
                        }
                        }
                        }
                        }
                        }
                        }
                        }
                        }
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
    }
  }
  if( 0 != NormPoolWorklist.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  NormPoolWorklist.RemoveFields();
  var_NumSamplesToPool = loopCounter_File;
  Trace ("***** Number of samples to pool from worklist:  ", var_NumSamplesToPool);
  var_NumPooledWells = 0;
  var_Pool_ZeroFlag = 0;
  var_Pool_A1_Count = 0;
  var_Pool_B1_Count = 0;
  var_Pool_C1_Count = 0;
  var_Pool_D1_Count = 0;
  var_Pool_E1_Count = 0;
  var_Pool_F1_Count = 0;
  var_Pool_G1_Count = 0;
  var_Pool_H1_Count = 0;
  var_Pool_A2_Count = 0;
  var_Pool_B2_Count = 0;
  var_Pool_C2_Count = 0;
  var_Pool_D2_Count = 0;
  var_Pool_E2_Count = 0;
  var_Pool_F2_Count = 0;
  var_Pool_G2_Count = 0;
  var_Pool_H2_Count = 0;
  var_Pool_A3_Count = 0;
  var_Pool_B3_Count = 0;
  var_Pool_C3_Count = 0;
  var_Pool_D3_Count = 0;
  var_Pool_E3_Count = 0;
  var_Pool_F3_Count = 0;
  var_Pool_G3_Count = 0;
  var_Pool_H3_Count = 0;
  SeqRemoveAll(ML_STAR.HSP_NormPool_Source);
  SeqRemoveAll(ML_STAR.HSP_NormPool_Dest);
  NormalizePool_Calc(Translate("A1"), arr_Pool_A1_SourceWell, arr_Pool_A1_SampleVol, arr_Pool_A1_Index, arr_Pool_A1_SampleType, var_Pool_A1_Count);
  NormalizePool_Calc(Translate("B1"), arr_Pool_B1_SourceWell, arr_Pool_B1_SampleVol, arr_Pool_B1_Index, arr_Pool_B1_SampleType, var_Pool_B1_Count);
  NormalizePool_Calc(Translate("C1"), arr_Pool_C1_SourceWell, arr_Pool_C1_SampleVol, arr_Pool_C1_Index, arr_Pool_C1_SampleType, var_Pool_C1_Count);
  NormalizePool_Calc(Translate("D1"), arr_Pool_D1_SourceWell, arr_Pool_D1_SampleVol, arr_Pool_D1_Index, arr_Pool_D1_SampleType, var_Pool_D1_Count);
  NormalizePool_Calc(Translate("E1"), arr_Pool_E1_SourceWell, arr_Pool_E1_SampleVol, arr_Pool_E1_Index, arr_Pool_E1_SampleType, var_Pool_E1_Count);
  NormalizePool_Calc(Translate("F1"), arr_Pool_F1_SourceWell, arr_Pool_F1_SampleVol, arr_Pool_F1_Index, arr_Pool_F1_SampleType, var_Pool_F1_Count);
  NormalizePool_Calc(Translate("G1"), arr_Pool_G1_SourceWell, arr_Pool_G1_SampleVol, arr_Pool_G1_Index, arr_Pool_G1_SampleType, var_Pool_G1_Count);
  NormalizePool_Calc(Translate("H1"), arr_Pool_H1_SourceWell, arr_Pool_H1_SampleVol, arr_Pool_H1_Index, arr_Pool_H1_SampleType, var_Pool_H1_Count);
  NormalizePool_Calc(Translate("A2"), arr_Pool_A2_SourceWell, arr_Pool_A2_SampleVol, arr_Pool_A2_Index, arr_Pool_A2_SampleType, var_Pool_A2_Count);
  NormalizePool_Calc(Translate("B2"), arr_Pool_B2_SourceWell, arr_Pool_B2_SampleVol, arr_Pool_B2_Index, arr_Pool_B2_SampleType, var_Pool_B2_Count);
  NormalizePool_Calc(Translate("C2"), arr_Pool_C2_SourceWell, arr_Pool_C2_SampleVol, arr_Pool_C2_Index, arr_Pool_C2_SampleType, var_Pool_C2_Count);
  NormalizePool_Calc(Translate("D2"), arr_Pool_D2_SourceWell, arr_Pool_D2_SampleVol, arr_Pool_D2_Index, arr_Pool_D2_SampleType, var_Pool_D2_Count);
  NormalizePool_Calc(Translate("E2"), arr_Pool_E2_SourceWell, arr_Pool_E2_SampleVol, arr_Pool_E2_Index, arr_Pool_E2_SampleType, var_Pool_E2_Count);
  NormalizePool_Calc(Translate("F2"), arr_Pool_F2_SourceWell, arr_Pool_F2_SampleVol, arr_Pool_F2_Index, arr_Pool_F2_SampleType, var_Pool_F2_Count);
  NormalizePool_Calc(Translate("G2"), arr_Pool_G2_SourceWell, arr_Pool_G2_SampleVol, arr_Pool_G2_Index, arr_Pool_G2_SampleType, var_Pool_G2_Count);
  NormalizePool_Calc(Translate("H2"), arr_Pool_H2_SourceWell, arr_Pool_H2_SampleVol, arr_Pool_H2_Index, arr_Pool_H2_SampleType, var_Pool_H2_Count);
  NormalizePool_Calc(Translate("A3"), arr_Pool_A3_SourceWell, arr_Pool_A3_SampleVol, arr_Pool_A3_Index, arr_Pool_A3_SampleType, var_Pool_A3_Count);
  NormalizePool_Calc(Translate("B3"), arr_Pool_B3_SourceWell, arr_Pool_B3_SampleVol, arr_Pool_B3_Index, arr_Pool_B3_SampleType, var_Pool_B3_Count);
  NormalizePool_Calc(Translate("C3"), arr_Pool_C3_SourceWell, arr_Pool_C3_SampleVol, arr_Pool_C3_Index, arr_Pool_C3_SampleType, var_Pool_C3_Count);
  NormalizePool_Calc(Translate("D3"), arr_Pool_D3_SourceWell, arr_Pool_D3_SampleVol, arr_Pool_D3_Index, arr_Pool_D3_SampleType, var_Pool_D3_Count);
  NormalizePool_Calc(Translate("E3"), arr_Pool_E3_SourceWell, arr_Pool_E3_SampleVol, arr_Pool_E3_Index, arr_Pool_E3_SampleType, var_Pool_E3_Count);
  NormalizePool_Calc(Translate("F3"), arr_Pool_F3_SourceWell, arr_Pool_F3_SampleVol, arr_Pool_F3_Index, arr_Pool_F3_SampleType, var_Pool_F3_Count);
  NormalizePool_Calc(Translate("G3"), arr_Pool_G3_SourceWell, arr_Pool_G3_SampleVol, arr_Pool_G3_Index, arr_Pool_G3_SampleType, var_Pool_G3_Count);
  NormalizePool_Calc(Translate("H3"), arr_Pool_H3_SourceWell, arr_Pool_H3_SampleVol, arr_Pool_H3_Index, arr_Pool_H3_SampleType, var_Pool_H3_Count);
  if (NumberOfSamples != var_NumPooledWells)
  {
    dialogHandle_47.SetOutput(Translate("The number of Pooled Wells calculated from the worklist does not match the number of Pooled Wells selected in the main prompt"), "\n", Translate(""), "\n", Translate("Number of Pooled Wells calculated from worklist: "), var_NumPooledWells, "\n", Translate("Number of Pooled Wells selected in the main prompt: "), NumberOfSamples, "\n", Translate(""), "\n", Translate(""), "\n", Translate("Note: you cannot skip wells to pool into, if there are no samples to pool into the next well in the worklist then the calculation process stops."), "\n", Translate(""), "\n", Translate("Please check the worklist and the main prompt and correct accordingly.  Run will now abort."));
    dialogHandle_47.ShowOutput(Translate("Error!"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    abort;
  }
  ML_STAR.HSP_NormPool_Source.SetCurrentPosition(1);
  ML_STAR.HSP_NormPool_Dest.SetCurrentPosition(1);
  var_Pool_TotalBufferVol = 0;
  {
    for(loopCounter_BufferTotalCalc = 0; loopCounter_BufferTotalCalc < var_NumPooledWells;)
    {
      loopCounter_BufferTotalCalc = loopCounter_BufferTotalCalc + 1;
      var_Pool_BufferVol=arr_BufferVol.GetAt(loopCounter_BufferTotalCalc-1);
      var_Pool_TotalBufferVol = var_Pool_TotalBufferVol + var_Pool_BufferVol;
    }
  }
  APPSLIB::TraceValues(Translate("***** Number of Pooled Wells generated from worklist: "), var_NumPooledWells, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well A1, number of samples: "), var_Pool_A1_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well B1, number of samples: "), var_Pool_B1_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well C1, number of samples: "), var_Pool_C1_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well D1, number of samples: "), var_Pool_D1_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well E1, number of samples: "), var_Pool_E1_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well F1, number of samples: "), var_Pool_F1_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well G1, number of samples: "), var_Pool_G1_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well H1, number of samples: "), var_Pool_H1_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well A2, number of samples: "), var_Pool_A2_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well B2, number of samples: "), var_Pool_B2_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well C2, number of samples: "), var_Pool_C2_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well D2, number of samples: "), var_Pool_D2_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well E2, number of samples: "), var_Pool_E2_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well F2, number of samples: "), var_Pool_F2_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well G2, number of samples: "), var_Pool_G2_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well H2, number of samples: "), var_Pool_H2_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well A3, number of samples: "), var_Pool_A3_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well B3, number of samples: "), var_Pool_B3_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well C3, number of samples: "), var_Pool_C3_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well D3, number of samples: "), var_Pool_D3_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well E3, number of samples: "), var_Pool_E3_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well F3, number of samples: "), var_Pool_F3_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well G3, number of samples: "), var_Pool_G3_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceValues(Translate("Pool Well H3, number of samples: "), var_Pool_H3_Count, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  APPSLIB::TraceArray(Translate("Pooled well order, read from worklist: "), arr_PoolWell_File);
  APPSLIB::TraceArray(Translate("Index for samples to transfer to pooled wells, read from worklist: "), arr_Index_File);
  APPSLIB::TraceArray(Translate("Sample types to transfer to pooled wells, read from worklist: "), arr_SampleType_File);
  APPSLIB::TraceSequence(ML_STAR.HSP_NormPool_Source);
  APPSLIB::TraceSequence(ML_STAR.HSP_NormPool_Dest);
  APPSLIB::TraceArray(Translate("Sample volumes to transfer to pooled wells, calculated from worklist: "), arr_SampleVol);
  APPSLIB::TraceArray(Translate("Buffer  volumes to transfer to pooled wells, calculated from worklist: "), arr_BufferVol);
  MECC::TraceComment(Translate("********** Submethod Complete: NormalizePool_Prep **********"));
}

function Check_TipQty( sequence & seq_TipsToCheck, variable var_TipsRequired, variable var_TipType ) void {
  private dialog customDialog_52;
  private variable SendEmail;
  private variable StartingTipPosition_1000_Override;
  private variable StartingTipPosition_50_Override;
  private variable StartingTipPosition_300_Override;
  private variable Tips_FirstPosition;
  private variable UserEmailAddress;
  private variable Tips_LastPosition;
  private variable TipsAvailable;
  MECC::TraceComment(Translate("*******************************************************\n********** Submethod:  Check_TipQty **********"));
  TRUSEQEXOMEPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  Tips_FirstPosition = seq_TipsToCheck.GetCurrentPosition();
  Tips_LastPosition = seq_TipsToCheck.GetCount();
  TipsAvailable = Tips_LastPosition - Tips_FirstPosition;
  TipsAvailable = TipsAvailable + 1;
  if (StartingTipPosition_1000_Override == 1)
  {
    if (var_TipType == 1000)
    {
      TipsAvailable = 0;
    }
  }
  if (StartingTipPosition_300_Override == 1)
  {
    if (var_TipType == 300)
    {
      TipsAvailable = 0;
    }
  }
  if (StartingTipPosition_50_Override == 1)
  {
    if (var_TipType == 50)
    {
      TipsAvailable = 0;
    }
  }
  if (Tips_FirstPosition <= 0)
  {
    TipsAvailable = 0;
  }
  Trace ("Tips available:  ", TipsAvailable);
  Trace ("Tips required:  ", var_TipsRequired);
  if (var_TipsRequired > TipsAvailable)
  {
    PTL::ResetUnloadingStateAndSequences();
    PTL::SetUnloadingState("UserResponseTime", 0);
    PTL::SetUnloadingState("ErrorHandling", 3);
    PTL::SetUnloadingSize(1);
    PTL::SetUnloadingSequence(0, seq_TipsToCheck, hslFalse, "");
    if( 0 == PTL::Unload(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetUnloadingSequence(0, seq_TipsToCheck);
    customDialog_52.InitCustomDialog("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");
    customDialog_52.SetCustomDialogProperty( "tipType.Text", var_TipType );
    customDialog_52.SetCustomDialogProperty( "textBlock4.Text", var_TipsRequired );
    customDialog_52.ShowCustomDialog();
    if (var_TipType == 50)
    {
      TRUSEQEXOMEPREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, var_TipsRequired, 0, 0);
      MECC::TraceComment(Translate("***** Load 50ul Tip Carrier *****"));
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      StartingTipPosition_50_Override = 0;
    }
    if (var_TipType == 300)
    {
      TRUSEQEXOMEPREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0, var_TipsRequired, 0);
      MECC::TraceComment(Translate("***** Load 300ul Tip Carrier *****"));
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      StartingTipPosition_300_Override = 0;
    }
    if (var_TipType == 1000)
    {
      MECC::TraceComment(Translate("***** Load 1ml Tip Carrier *****"));
      TRUSEQEXOMEPREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0, 0, var_TipsRequired);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      StartingTipPosition_1000_Override = 0;
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    if (SendEmail == 1)
    {
      onerror goto errLabel_53 ;
      err.Clear();
      Util::SendEMail(UserEmailAddress, Translate("Please load more tips"), Translate(""));
      errLabel_53 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        Trace ("Email is not setup correctly!");
      }   /* end if from skip handler if no error */
    }
  }
  {
    Trace (var_TipType, "uL Tips Available = ", TipsAvailable);
    Trace (var_TipType, "uL Tips Needed = ", var_TipsRequired);
  }
  if (TipsAvailable == var_TipsRequired)
  {
    if (var_TipType == 1000)
    {
      StartingTipPosition_1000_Override = 1;
    }
    if (var_TipType == 300)
    {
      StartingTipPosition_300_Override = 1;
    }
    if (var_TipType == 50)
    {
      StartingTipPosition_50_Override = 1;
    }
  }
  MECC::TraceComment(Translate("********** Submethod Complete:  Check_TipQty **********\n******************************************************************"));
}
