#pragma once
#include "HslHamHeaterShakerLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLSensorLib.hsl"
#include "HSLInhecoTEC\\HSLInhecoTECLib.hsl"
#include "Inheco ODTC\\Inheco ODTC.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLMthLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "RemoveTextDelimiters\\RemoveTextDelimitersFromAsciiTextFile.hsl"
#include "HSLSeqLib.hsl"
#include "HSLAppsLib.hsl"
#include "HSLUtilLib2.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace NGSSTARPREP {
  variable _blnSimulationModeON;
  private function Abstract(  ) void ;
  function CPAC_CheckTemperature( variable i_intCPACTemp ) void ;
  function CPAC_CheckTemperatureMinimum( variable i_intCPACTemp ) void ;
  function CPAC_Init(  ) void ;
  function CPAC_SetTemperature( variable i_intCPACTemp ) void ;
  function CPAC_Terminate(  ) void ;
  function DATA_ReadInputWorklistExcelFormat( variable & io_strSamplePlateFile, sequence & io_seqSourcePlateTemplate, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & io_arrIndex1SeqPositions[], variable & io_arrIndex1IDs[], variable & io_arrIndex2SeqPositions[], variable & io_arrIndex2IDs[], variable & io_arrALPseqLabID[], variable & io_arrALPseqPositions[], variable & o_IndexLabwareFormat ) void ;
  function DATA_ReadNormFile( device & ML_STAR, variable i_strNormalizationFile, variable & o_fltTotalBufferVolume_uL, variable & io_intNumberOfSamples ) void ;
  function DATA_ReadSamplePlateFile( variable & io_strSamplePlateFile, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & io_arrIndex1SeqPositions[], variable & io_arrIndex2SeqPositions[], variable & io_arrALPseqPositions[], variable i_strTempSamplePlateFileName ) void ;
  function DATA_ReadSampleSheet( variable & io_strSourceFileSampleSheet, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & io_arrIndex1SeqPositions[], variable & io_arrIndex2SeqPositions[], variable & io_arrALPseqPositions[], variable i_strTempSampleSheetFileName ) void ;
  function HHS_GetTemperature( variable i_intHHS ) void ;
  function HHS_Init( variable & o_intHHSDeviceNo1, variable & o_intHHSDeviceNo2, variable & o_intHHSDeviceNo3, variable & o_intHHSDeviceNo4, variable & o_intHHSDeviceNo5 ) void ;
  function HHS_SetTemperature( variable i_intHHS, variable i_fltTemperature ) void ;
  function HHS_Shake( variable i_intHHS, variable i_intSpeed, variable i_intShakingDuration ) void ;
  function HHS_Terminate( variable i_intHHSDeviceNo1, variable i_intHHSDeviceNo2, variable i_intHHSDeviceNo3, variable i_intHHSDeviceNo4, variable i_intHHSDeviceNo5 ) void ;
  function HandOverSimulationModeForAllLocalSMTs( variable i_blnSimulationON ) void ;
  function LiquidWasteSensor_Init( variable i_intComPort ) void ;
  function ODTC_CloseDoor( variable i_IntDeviceNumber ) void ;
  function ODTC_DownloadProtocol( variable i_IntDeviceNumber, variable i_strProtocollFullFileName ) void ;
  function ODTC_ExecuteProtocol( variable i_IntDeviceNumber, variable i_strProtocollFullFileName, variable i_strNameOfProtocollOnDevice, variable & o_intTimeForProtocol, variable & o_intRequestIDForActiveProtocol, variable i_blnShortenPreheatingMethodsTo40Seconds ) void ;
  function ODTC_Init( variable i_strDeviceAddress, variable & o_intDeviceNum, variable i_strLocalIPAdress ) void ;
  function ODTC_OpenDoor( variable i_IntDeviceNumber ) void ;
  function ODTC_ReadActualTemperature( variable i_IntDeviceNumber, variable i_intTimeForProtocoll ) void ;
  function ODTC_Terminate( variable i_intDeviceNum ) void ;
  function ODTC_WaitForLidAndBlockCorrectTemperature( variable i_IntDeviceNumber, variable i_RequestedBlockTemperature, variable i_RequestedLidTemperature ) void ;
  function ODTC_WaitForStartedProtocolToFinish( variable i_IntDeviceNumber, variable i_intTimeOut, variable i_intRequestIDToWaitFor ) void ;
  private function _CPAC_ReportErrorText( variable strErrorCode ) void ;
  private function _ODTC_HandleReturnValue( variable i_blnSuccess, variable i_strFunctionName, variable i_intReturnValue, variable i_strMessage ) void ;
  private function _Version(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  private function Abstract(  ) void {
    MECC::TraceComment(Translate("*********************************************************************\nSubmethod Library:  NGSStarPrep\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate:  October 10, 2017 (By Stephan Grosch)\nVersion:  1.9\n\nVersion Notes:\n1. see _Version\n\n*********************************************************************"));
  }

  function HHS_Init( variable & o_intHHSDeviceNo1, variable & o_intHHSDeviceNo2, variable & o_intHHSDeviceNo3, variable & o_intHHSDeviceNo4, variable & o_intHHSDeviceNo5 ) void {
    private variable DialogReturn;
    private variable loopCounter1;
    private dialog customDialog_1;
    private dialog customDialog_2;
    private variable blnDisableHHS5;
    private variable intErrorCodeHHS;
    private variable intErrorCodeHHS1;
    private variable intErrorCodeHHS2;
    private variable intErrorCodeHHS3;
    private variable intErrorCodeHHS4;
    private variable intErrorCodeHHS5;
    o_intHHSDeviceNo1 = 0;
    o_intHHSDeviceNo2 = 0;
    o_intHHSDeviceNo3 = 0;
    o_intHHSDeviceNo4 = 0;
    o_intHHSDeviceNo5 = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  HHS_Init <<<<<<<<<<"));
    {
      loopCounter1 = 0;
      while (1 == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        HSLHamHeaterShaker::SetSimulation(_blnSimulationModeON);
        blnDisableHHS5 = 0;
        intErrorCodeHHS = 0;
        intErrorCodeHHS1 = HSLHamHeaterShaker::CreateUsbDevice(1, o_intHHSDeviceNo1);
        intErrorCodeHHS2 = HSLHamHeaterShaker::CreateUsbDevice(2, o_intHHSDeviceNo2);
        intErrorCodeHHS3 = HSLHamHeaterShaker::CreateUsbDevice(3, o_intHHSDeviceNo3);
        intErrorCodeHHS4 = HSLHamHeaterShaker::CreateUsbDevice(4, o_intHHSDeviceNo4);
        if (blnDisableHHS5 != 1)
        {
          intErrorCodeHHS5 = HSLHamHeaterShaker::CreateUsbDevice(5, o_intHHSDeviceNo5);
        }
        if (intErrorCodeHHS1 != 0)
        {
          Trace ("Error on HHS1:  ", intErrorCodeHHS1);
        }
        if (intErrorCodeHHS2 != 0)
        {
          Trace ("Error on HHS2:  ", intErrorCodeHHS2);
        }
        if (intErrorCodeHHS3 != 0)
        {
          Trace ("Error on HHS3:  ", intErrorCodeHHS3);
        }
        if (intErrorCodeHHS4 != 0)
        {
          Trace ("Error on HHS4:  ", intErrorCodeHHS4);
        }
        if (blnDisableHHS5 != 1)
        {
          if (intErrorCodeHHS5 != 0)
          {
            Trace ("Error on HHS5:  ", intErrorCodeHHS5);
          }
        }
        intErrorCodeHHS = intErrorCodeHHS1 + intErrorCodeHHS2 + intErrorCodeHHS3 + intErrorCodeHHS4 + intErrorCodeHHS5;
        if (intErrorCodeHHS > 0)
        {
          MECC::TraceComment(Translate("\n\nHHS Error codes:\n1 - Fatal Error\n2 - Node not Initialized\n3 - Device not connected\n4 - CAN error\n5 - EEProm error\n6 - Unknown command\n7 - Unknown parameter\n8 - Parameter out of range\n9 - Voltage error\n10 - Stop \n11 - Wrong address\n13 - Shaker init failed\n14 - Shaker not initialized\n15 - Shaker step loss\n17 - Plate lock init failure\n18 - Plate lock step loss\n26 - Unknown firmware error\n\n"));
          customDialog_2.InitCustomDialog("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");
          customDialog_2.SetCustomDialogProperty( "textBlock3.Text", intErrorCodeHHS );
          customDialog_2.ShowCustomDialog();
          DialogReturn = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
          if (DialogReturn == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
          }
        }
        else
        {
          break;
        }
      }
    }
    intErrorCodeHHS1 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo1, 1);
    intErrorCodeHHS1 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo1, 0);
    intErrorCodeHHS2 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo2, 1);
    intErrorCodeHHS2 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo2, 0);
    intErrorCodeHHS3 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo3, 1);
    intErrorCodeHHS3 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo3, 0);
    intErrorCodeHHS4 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo4, 1);
    intErrorCodeHHS4 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo4, 0);
    if (blnDisableHHS5 != 1)
    {
      intErrorCodeHHS5 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo5, 1);
      intErrorCodeHHS5 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo5, 0);
    }
    if (intErrorCodeHHS1 != 0)
    {
      Trace ("Error on HHS1:  ", intErrorCodeHHS1);
    }
    if (intErrorCodeHHS2 != 0)
    {
      Trace ("Error on HHS2:  ", intErrorCodeHHS2);
    }
    if (intErrorCodeHHS3 != 0)
    {
      Trace ("Error on HHS3:  ", intErrorCodeHHS3);
    }
    if (intErrorCodeHHS4 != 0)
    {
      Trace ("Error on HHS4:  ", intErrorCodeHHS4);
    }
    if (blnDisableHHS5 != 1)
    {
      if (intErrorCodeHHS5 != 0)
      {
        Trace ("Error on HHS5:  ", intErrorCodeHHS5);
      }
    }
    intErrorCodeHHS = intErrorCodeHHS1 + intErrorCodeHHS2 + intErrorCodeHHS3 + intErrorCodeHHS4 + intErrorCodeHHS5;
    if (intErrorCodeHHS > 0)
    {
      MECC::TraceComment(Translate("\n\nHHS Error codes:\n1 - Fatal Error\n2 - Node not Initialized\n3 - Device not connected\n4 - CAN error\n5 - EEProm error\n6 - Unknown command\n7 - Unknown parameter\n8 - Parameter out of range\n9 - Voltage error\n10 - Stop \n11 - Wrong address\n13 - Shaker init failed\n14 - Shaker not initialized\n15 - Shaker step loss\n17 - Plate lock init failure\n18 - Plate lock step loss\n26 - Unknown firmware error\n\n"));
      customDialog_1.InitCustomDialog("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");
      customDialog_1.SetCustomDialogProperty( "textBlock3.Text", intErrorCodeHHS );
      customDialog_1.ShowCustomDialog();
      DialogReturn = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: HHS_Init <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function CPAC_Init(  ) void {
    private variable answer_CPACerror;
    private dialog customDialog_3;
    private dialog customDialog_4;
    private variable answer_CPACcheck;
    private variable strInitCPAC;
    private variable strErrorCode;
    private variable strErrorText;
    private variable strFirmWareVersion;
    private variable strLastError;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Start Submethod : CPAC_Init <<<<<<<<<<"));
    HSLInhecoTECLib::Initialize(0, _blnSimulationModeON, strInitCPAC);
    if (_blnSimulationModeON == 0)
    {
      if (strInitCPAC != "000")
      {
        HSLInhecoTECLib::GetLastError(strLastError);
        customDialog_4.InitCustomDialog("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");
        customDialog_4.SetCustomDialogProperty( "textBlock3.Text", strLastError );
        customDialog_4.ShowCustomDialog();
        answer_CPACcheck = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
        HSLInhecoTECLib::Initialize(0, 0, strInitCPAC);
        if (strInitCPAC != "000")
        {
          HSLInhecoTECLib::GetDescriptionForErrorCode(strInitCPAC, strErrorText);
          customDialog_3.InitCustomDialog("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");
          customDialog_3.SetCustomDialogProperty( "textBlock3.Text", strErrorText );
          customDialog_3.ShowCustomDialog();
          answer_CPACcheck = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
          if (answer_CPACerror == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
          }
          if (answer_CPACerror == ASWGLOBAL::DIALOG::IGNORE)
          {
            MECC::TraceComment(Translate("************ WARNING! Method will continue with the CPAC not working correctly ************"));
          }
        }
      }
      HSLInhecoTECLib::SetTraceLevel(1);
      HSLInhecoTECLib::GetFirmwareVersion(0, 1, strFirmWareVersion, strErrorCode);
      Trace ("Firmware version for CPAC:  ", strFirmWareVersion);
      _CPAC_ReportErrorText(strErrorCode);
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - CPAC INIT simulated"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete : CPAC_Init <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function HHS_Shake( variable i_intHHS, variable i_intSpeed, variable i_intShakingDuration ) void {
    private timer Shaking;
    private variable fltActualShakingDurationHHS;
    private variable intCheckForEarlyStop;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  HHS_Shake <<<<<<<<<<"));
    Trace ("***** Now shaking on HHS", i_intHHS, " at ", i_intSpeed, "rpm for ", i_intShakingDuration, "seconds...");
    if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      HSLHamHeaterShaker::StartShaker(i_intHHS, i_intSpeed);
      if( 0 == Shaking.SetTimer(i_intShakingDuration) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      intCheckForEarlyStop = Shaking.WaitTimer(hslTrue, hslTrue);
      if (0 == intCheckForEarlyStop)
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if (intCheckForEarlyStop == 3)
      {
        MECC::TraceComment(Translate("***** WARNING!  The shaking was stopped prematurely by the operator! *****"));
      }
      fltActualShakingDurationHHS = Shaking.GetElapsedTime();
      Trace ("***** Actual Shaking Duration (seconds):  ", fltActualShakingDurationHHS);
      HSLHamHeaterShaker::StopShaker(i_intHHS);
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - HHS SHAKE simulated"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  HHS_Shake <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function HHS_SetTemperature( variable i_intHHS, variable i_fltTemperature ) void {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  HHS_SetTemperature <<<<<<<<<<"));
    if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      HSLHamHeaterShaker::StopTempCtrl(i_intHHS);
      if (i_fltTemperature != 0)
      {
        Trace ("***** HHS number ", i_intHHS, " is being set to ", i_fltTemperature, " C");
        HSLHamHeaterShaker::StartTempCtrl(i_intHHS, i_fltTemperature, 0);
      }
      else
      {
        Trace ("***** HHS number ", i_intHHS, " is not being controlled, as it is desired to be at room temperature.");
      }
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - HHS set temperature"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  HHS_SetTemperature <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function HHS_Terminate( variable i_intHHSDeviceNo1, variable i_intHHSDeviceNo2, variable i_intHHSDeviceNo3, variable i_intHHSDeviceNo4, variable i_intHHSDeviceNo5 ) void {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: HHS_Terminate <<<<<<<<<<"));
    if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      HSLHamHeaterShaker::StopAllShaker();
      Trace ("***** All HHS are not being controlled, as it is desired to be at room temperature.");
      if (i_intHHSDeviceNo1 != ASWGLOBAL::BOOL::FALSE)
      {
        HSLHamHeaterShaker::StopTempCtrl(i_intHHSDeviceNo1);
      }
      if (i_intHHSDeviceNo2 != ASWGLOBAL::BOOL::FALSE)
      {
        HSLHamHeaterShaker::StopTempCtrl(i_intHHSDeviceNo2);
      }
      if (i_intHHSDeviceNo3 != ASWGLOBAL::BOOL::FALSE)
      {
        HSLHamHeaterShaker::StopTempCtrl(i_intHHSDeviceNo3);
      }
      if (i_intHHSDeviceNo4 != ASWGLOBAL::BOOL::FALSE)
      {
        HSLHamHeaterShaker::StopTempCtrl(i_intHHSDeviceNo4);
      }
      if (i_intHHSDeviceNo5 != ASWGLOBAL::BOOL::FALSE)
      {
        HSLHamHeaterShaker::StopTempCtrl(i_intHHSDeviceNo5);
      }
      HSLHamHeaterShaker::Terminate();
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - Termination simulated"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: HHS_Terminate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function CPAC_SetTemperature( variable i_intCPACTemp ) void {
    private variable fltCPACTemperature;
    private variable fltActualTemperatureCPAC;
    private variable strErrorCode;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  CPAC_SetTemperature <<<<<<<<<<"));
    if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      HSLInhecoTECLib::GetActualDeviceTemperature(0, 1, 1, fltActualTemperatureCPAC, strErrorCode);
      Trace ("Current CPAC Temperature (in tenths of degrees):  ", fltActualTemperatureCPAC);
      _CPAC_ReportErrorText(strErrorCode);
      fltCPACTemperature = i_intCPACTemp / (1.0 * 1.0);
      HSLInhecoTECLib::SetTargetTemperature(0, 1, fltCPACTemperature, strErrorCode);
      _CPAC_ReportErrorText(strErrorCode);
      Trace ("CPAC Temperature float variable set to:  ", fltCPACTemperature);
      HSLInhecoTECLib::StartTemperatureControl(0, 1, strErrorCode);
      _CPAC_ReportErrorText(strErrorCode);
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - CPAC set temperature"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  CPAC_SetTemperature <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function CPAC_Terminate(  ) void {
    private variable strErrorCode;
    private variable blnTerminate;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: CPAC_Terminate <<<<<<<<<<"));
    if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      HSLInhecoTECLib::StopTemperatureControl(0, 1, strErrorCode);
      _CPAC_ReportErrorText(strErrorCode);
      if(0){
        HSLInhecoTECLib::Terminate(1);
      }
      blnTerminate = HSLInhecoTECLib::Terminate(1);
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - CPAC termination"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: CPAC_Terminate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function LiquidWasteSensor_Init( variable i_intComPort ) void {
    private variable DialogReturn;
    private variable strTextblock;
    private dialog customDialog_5;
    private dialog customDialog_6;
    private variable IntEndlessLoopCounter;
    private variable intSuccsess;
    private variable blnSolidWasteContainerIsPresent;
    private variable blnStartMonitoringStarted;
    private variable blnRetValue;
    private dialog customDialog_7;
    private variable intSensorStatus;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  LiquidWasteSensor_Init <<<<<<<<<<"));
    if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      blnRetValue = SensorLib::Initialize(i_intComPort);
      Trace ("------- return value of INIT Sensor: ", blnRetValue);
      if (blnRetValue == ASWGLOBAL::BOOL::TRUE)
      {
        Trace ("------- com port: ", i_intComPort);
        blnStartMonitoringStarted = ASWGLOBAL::BOOL::FALSE;
        {
          IntEndlessLoopCounter = 0;
          while (1 == 1)
          {
            IntEndlessLoopCounter = IntEndlessLoopCounter + 1;
            intSuccsess = 0;
            intSensorStatus = SensorLib::CheckLiquid();
            if (intSensorStatus == 0)
            {
              strTextblock = Translate("Sensor activated. Liquid level reached the maximum level.    Or check cable connection to senor.");
              customDialog_5.InitCustomDialog("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");
              customDialog_5.SetCustomDialogProperty( "textBlock3.Text", strTextblock );
              customDialog_5.ShowCustomDialog();
              DialogReturn = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
              if (DialogReturn == ASWGLOBAL::DIALOG::CANCEL)
              {
                abort;
              }
            }
            else
            {
              Trace ("------- Check liquid waste senor has been perfomed: Liquid level below maximum of carboy.");
              intSuccsess = intSuccsess + 1;
            }
            blnSolidWasteContainerIsPresent = SensorLib::CheckSolidWaste();
            Trace ("------- blnSolidWasteContainerIsPresent: ", blnSolidWasteContainerIsPresent);
            if (blnSolidWasteContainerIsPresent == 0)
            {
              strTextblock = Translate("Sensor activated. Solid waste not present.");
              customDialog_6.InitCustomDialog("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");
              customDialog_6.SetCustomDialogProperty( "textBlock3.Text", strTextblock );
              customDialog_6.ShowCustomDialog();
              DialogReturn = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
              if (DialogReturn == ASWGLOBAL::DIALOG::CANCEL)
              {
                abort;
              }
            }
            else
            {
              Trace ("------- Check solid waste senor has been perfomed: solid waste is present.");
              intSuccsess = intSuccsess + 1;
            }
            if (intSuccsess == 2)
            {
              MECC::TraceComment(Translate("Liquid waste below maximum AND solid waste present --> loop break activated.\n"));
              break;
            }
            Trace ("------- IntEndlessLoopCounter: ", IntEndlessLoopCounter);
          }
        }
      }
      else
      {
        Trace ("------- Init liquid / solid waste senor has been perfomed: No comunication --> check com port settings. Or restart computer and powerswitch MLStar");
        customDialog_7.InitCustomDialog("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");
        customDialog_7.ShowCustomDialog();
        DialogReturn = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
    }
    else
    {
      Trace ("------- Check liquid / solid waste senor has been perfomed in simulation mode: Liquid level below maximum of carboy and solid waste is present.");
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  LiquidWasteSensor_Init <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _CPAC_ReportErrorText( variable strErrorCode ) void {
    private variable strDecodedErrorText;
    if (strErrorCode != "TEC_0")
    {
      if (strErrorCode != "000")
      {
        HSLInhecoTECLib::GetDescriptionForErrorCode(strErrorCode, strDecodedErrorText);
        Trace ("CPAC ERROR CODE:  ", strErrorCode);
        Trace ("CPAC ERROR DECODED MESSSAGE:  ", strDecodedErrorText);
      }
    }
  }

  function CPAC_CheckTemperature( variable i_intCPACTemp ) void {
    private variable ret_ActualTemp_float;
    private variable strGetTypeOfCurrentVariable;
    private variable fltActualTemperatureCPAC;
    private variable strErrorCode;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  CPAC_CheckTemperature <<<<<<<<<<"));
    if (_blnSimulationModeON == 0)
    {
      ret_ActualTemp_float = 0.0;
      HSLInhecoTECLib::GetActualDeviceTemperature(0, 1, 1, fltActualTemperatureCPAC, strErrorCode);
      strGetTypeOfCurrentVariable = StrGetType(fltActualTemperatureCPAC);
      Trace ("Expected max CPAC temperature:  ", i_intCPACTemp);
      Trace ("Get actual CPAC temperature:  ", fltActualTemperatureCPAC);
      Trace ("Get type of current variable (get temp):  ", strGetTypeOfCurrentVariable);
      _CPAC_ReportErrorText(strErrorCode);
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - CPAC check temperature simulated"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  CPAC_CheckTemperature <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function HHS_GetTemperature( variable i_intHHS ) void {
    private variable fltActualTemperatureHHS;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>> Submethod:  HHS_GetTemperature <<<<<"));
    if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      HSLHamHeaterShaker::GetTemperature(i_intHHS, fltActualTemperatureHHS);
      Trace ("***** The current temperature for HHS", i_intHHS, " is ", fltActualTemperatureHHS, "C *****");
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - HHS get temperature"));
      Trace ("***** The current temperature for HHS", i_intHHS, " is ", fltActualTemperatureHHS, "C *****");
    }
    MECC::TraceComment(Translate(">>>>> Submethod Complete:  HHS_GetTemperature <<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _Version(  ) void {
  }

  function CPAC_CheckTemperatureMinimum( variable i_intCPACTemp ) void {
    private variable loopCounter1;
    private variable answer_CPACcheck;
    private timer timer1;
    private dialog customDialog_8;
    private variable strGetTypeOfCurrentVariable;
    private variable fltActualTemperatureCPAC;
    private variable strErrorCode;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  CPAC_CheckTemperatureMinimum <<<<<<<<<<"));
    if (_blnSimulationModeON == 0)
    {
      fltActualTemperatureCPAC = 0.0;
      HSLInhecoTECLib::GetActualDeviceTemperature(0, 1, 1, fltActualTemperatureCPAC, strErrorCode);
      strGetTypeOfCurrentVariable = StrGetType(fltActualTemperatureCPAC);
      Trace ("Expected max CPAC temperature:  ", i_intCPACTemp);
      Trace ("Get actual CPAC temperature:  ", fltActualTemperatureCPAC);
      Trace ("Get type of current variable (get temp):  ", strGetTypeOfCurrentVariable);
      _CPAC_ReportErrorText(strErrorCode);
      {
        loopCounter1 = 0;
        while (fltActualTemperatureCPAC > i_intCPACTemp)
        {
          loopCounter1 = loopCounter1 + 1;
          if( 0 == timer1.SetTimer(10) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          HSLInhecoTECLib::GetActualDeviceTemperature(0, 1, 1, fltActualTemperatureCPAC, strErrorCode);
          _CPAC_ReportErrorText(strErrorCode);
          Trace ("Current CPAC temperature:  ", fltActualTemperatureCPAC);
          if (loopCounter1 > 60)
          {
            customDialog_8.InitCustomDialog("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");
            customDialog_8.ShowCustomDialog();
            answer_CPACcheck = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
          }
          if (answer_CPACcheck == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
          }
          if (answer_CPACcheck == ASWGLOBAL::DIALOG::IGNORE)
          {
            break;
          }
        }
      }
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - CPAC check Temperature minimum simulated"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  CPAC_CheckTemperatureMinimum <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_Init( variable i_strDeviceAddress, variable & o_intDeviceNum, variable i_strLocalIPAdress ) void {
    private variable strDeviceID;
    private variable strState;
    private variable blnReturn;
    private variable intReturnValue;
    private variable strCurrentTime;
    private variable blnLocked;
    private variable strMessage;
    private variable strPmsID;
    private variable strTrace;
    o_intDeviceNum = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>>  Start Submethod : ODTC_Init<<<<<<<<<<"));
    Trace ("_blnSimulationModeON:  ", _blnSimulationModeON);
    Trace ("i_strLocalIPAdress:  ", i_strLocalIPAdress);
    Trace ("i_strDeviceAddress:  ", i_strDeviceAddress);
    Inheco_ODTC::Standard::SetTraceLevel(TRACE_LEVEL_DEBUG);
    blnReturn = Inheco_ODTC::Standard::Connect(i_strLocalIPAdress, i_strDeviceAddress, Translate(""), _blnSimulationModeON, o_intDeviceNum, strMessage);
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::Initialize", intReturnValue, strMessage);
    blnReturn = Inheco_ODTC::Standard::Reset(o_intDeviceNum, _blnSimulationModeON, 120, Translate(""), Translate(""), Translate(""), intReturnValue, strMessage);
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::ResetDevice", intReturnValue, strMessage);
    blnReturn = Inheco_ODTC::Standard::Initialize(o_intDeviceNum, Translate(""), intReturnValue, strMessage);
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::InitializeDevice", intReturnValue, strMessage);
    blnReturn = Inheco_ODTC::Standard::GetStatus(o_intDeviceNum, strDeviceID, strState, blnLocked, strPmsID, strCurrentTime, intReturnValue, strMessage);
    strTrace = StrConcat12("strDeviceID = ", strDeviceID, ", strState = ", strState, ", blnLocked = ", blnLocked, ", strPMSID = ", strPmsID, ", strCurrentDeviceTime = ", strCurrentTime, ", intReturnValue = ", intReturnValue);
    strTrace = StrConcat4(strTrace, ", strMessage = ", strMessage, "");
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strTrace);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete : ODTC_Init <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _ODTC_HandleReturnValue( variable i_blnSuccess, variable i_strFunctionName, variable i_intReturnValue, variable i_strMessage ) void {
    private variable strMethodName;
    private variable strTrace;
    private variable retValueDialog;
    private dialog customDialog_9;
    if (i_blnSuccess == ASWGLOBAL::BOOL::TRUE)
    {
      strTrace = StrConcat4("SiLA message was '", i_strMessage, "', SiLA return value was ", i_intReturnValue);
      Trace ("***** Trace successful message = ", strTrace);
      return;
    }
    else
    {
      strTrace = StrConcat4("SiLA message was '", i_strMessage, "', SiLA return value was ", i_intReturnValue);
      customDialog_9.InitCustomDialog("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");
      customDialog_9.SetCustomDialogProperty( "textBlock3.Text", i_strFunctionName );
      customDialog_9.SetCustomDialogProperty( "textBlock4.Text", strMethodName );
      customDialog_9.SetCustomDialogProperty( "textBlock5.Text", strTrace );
      customDialog_9.ShowCustomDialog();
      retValueDialog = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
      if (retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
      }
    }
  }

  function ODTC_Terminate( variable i_intDeviceNum ) void {
    private variable blnReturn;
    private variable intReturnValue;
    private variable strMessage;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Start Submethod : ODTC_Terminate <<<<<<<<<<"));
    if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      blnReturn = Inheco_ODTC::Standard::StopMethod(i_intDeviceNum, Translate(""), intReturnValue, strMessage);
      _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::StopMethod", intReturnValue, strMessage);
      blnReturn = Inheco_ODTC::Standard::Terminate(i_intDeviceNum, strMessage);
      _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::Terminate", intReturnValue, strMessage);
    }
    MECC::TraceComment(Translate(">>>>>>>>>>  Submethod Complete : ODTC_Terminate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_OpenDoor( variable i_IntDeviceNumber ) void {
    private variable blnReturn;
    private variable intReturnValue;
    private variable strMessage;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_OpenDoor:  Start Submethod <<<<<<<<<<"));
    blnReturn = Inheco_ODTC::Standard::OpenDoor(i_IntDeviceNumber, Translate(""), intReturnValue, strMessage);
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::OpenDoor", intReturnValue, strMessage);
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_OpenDoor:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_CloseDoor( variable i_IntDeviceNumber ) void {
    private variable blnReturn;
    private variable intReturnValue;
    private variable strMessage;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_CloseDoor:  Start Submethod <<<<<<<<<<"));
    blnReturn = Inheco_ODTC::Standard::CloseDoor(i_IntDeviceNumber, Translate(""), intReturnValue, strMessage);
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::CloseDoor", intReturnValue, strMessage);
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_CloseDoor:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_WaitForStartedProtocolToFinish( variable i_IntDeviceNumber, variable i_intTimeOut, variable i_intRequestIDToWaitFor ) void {
    private variable strDeviceID;
    private variable strState;
    private variable blnReturn;
    private variable intReturnValue;
    private variable strCurrentTime;
    private variable blnLocked;
    private variable strMessage;
    private variable strPmsID;
    private variable strTrace;
    private variable intTimeToWait;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_WaitForStartedProtocolToFinish:  Start Submethod <<<<<<<<<<"));
    intTimeToWait = i_intTimeOut + 20;
    strTrace = StrConcat2("Effective time to wait before an error is triggered = ", intTimeToWait);
    Trace ("***** Message = ", strTrace);
    blnReturn = Inheco_ODTC::Standard::WaitForEndOfExecuteMethod(i_IntDeviceNumber, intTimeToWait, i_intRequestIDToWaitFor, intReturnValue, strMessage);
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::WaitForStartedProtocolToFinish", intReturnValue, strMessage);
    blnReturn = Inheco_ODTC::Standard::GetStatus(i_IntDeviceNumber, strDeviceID, strState, blnLocked, strPmsID, strCurrentTime, intReturnValue, strMessage);
    strTrace = StrConcat12("strDeviceID = ", strDeviceID, ", strState = ", strState, ", blnLocked = ", blnLocked, ", strPMSID = ", strPmsID, ", strCurrentDeviceTime = ", strCurrentTime, ", intReturnValue = ", intReturnValue);
    strTrace = StrConcat4(strTrace, ", strMessage = ", strMessage, "");
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strTrace);
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_WaitForStartedProtocolToFinish:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_ReadActualTemperature( variable i_IntDeviceNumber, variable i_intTimeForProtocoll ) void {
    private variable strDeviceID;
    private variable strState;
    private variable blnReturn;
    private variable strTime;
    private variable fltElapsedTime;
    private variable intReturnValue;
    private variable strCurrentTime;
    private variable blnLocked;
    private variable strMessage;
    private variable strPmsID;
    private timer hdlDelay;
    private timer hdlWaitForFinish;
    private variable strArrTemperatureNames[];
    private variable fltArrTemperature[];
    private variable strTrace;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_ReadActualTemperature:  Start Submethod <<<<<<<<<<"));
    if( 0 == hdlWaitForFinish.SetTimer(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    {
      while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
      {
        fltElapsedTime = hdlWaitForFinish.GetElapsedTime();
        if (fltElapsedTime >= i_intTimeForProtocoll)
        {
          break;
        }
        blnReturn = Inheco_ODTC::Standard::ReadActualTemperature(i_IntDeviceNumber, Translate(""), strTime, fltArrTemperature, strArrTemperatureNames, intReturnValue, strMessage);
        TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
        TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, "fltArrTemperature", "strArrTemperatureNames", fltArrTemperature, strArrTemperatureNames);
        strTrace = StrConcat8("strTime = ", strTime, ", intReturnValue = ", intReturnValue, ", strMessage = ", strMessage, "", "");
        if (intReturnValue == 12)
        {
          Trace ("***** ReadActualTemperature failed But Error 2005 or error 2006 warning will be ignored Device will continue operation, intReturnValue = ", intReturnValue);
          Trace ("***** Message = ", strMessage);
          blnReturn = ASWGLOBAL::BOOL::TRUE;
        }
        _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::ReadActualTemperature", intReturnValue, strTrace);
        if( 0 == hdlDelay.SetTimer(5) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == hdlDelay.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    blnReturn = Inheco_ODTC::Standard::GetStatus(i_IntDeviceNumber, strDeviceID, strState, blnLocked, strPmsID, strCurrentTime, intReturnValue, strMessage);
    strTrace = StrConcat12("strDeviceID = ", strDeviceID, ", strState = ", strState, ", blnLocked = ", blnLocked, ", strPMSID = ", strPmsID, ", strCurrentDeviceTime = ", strCurrentTime, ", intReturnValue = ", intReturnValue);
    strTrace = StrConcat4(strTrace, ", strMessage = ", strMessage, "");
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strTrace);
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_ReadActualTemperature:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_ExecuteProtocol( variable i_IntDeviceNumber, variable i_strProtocollFullFileName, variable i_strNameOfProtocollOnDevice, variable & o_intTimeForProtocol, variable & o_intRequestIDForActiveProtocol, variable i_blnShortenPreheatingMethodsTo40Seconds ) void {
    private variable blnReturn;
    private variable intReturnValue;
    private variable strMessage;
    private variable strTrace;
    private variable intPriority;
    o_intTimeForProtocol = 0;
    o_intRequestIDForActiveProtocol = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_ExecuteProtocol:  Start Submethod <<<<<<<<<<"));
    Trace ("------- ODTC device script to be perfomed: ", i_strProtocollFullFileName);
    if (i_blnShortenPreheatingMethodsTo40Seconds == ASWGLOBAL::BOOL::TRUE)
    {
      intPriority = 10000;
    }
    else
    {
      intPriority = 10;
    }
    blnReturn = Inheco_ODTC::Standard::ExecuteMethod(i_IntDeviceNumber, Translate(""), i_strNameOfProtocollOnDevice, intPriority, o_intTimeForProtocol, o_intRequestIDForActiveProtocol, intReturnValue, strMessage);
    strTrace = StrConcat8("o_intTimeForProtocol= ", o_intTimeForProtocol, ", o_intRequestIDForActiveProtocol = ", o_intRequestIDForActiveProtocol, ", intReturnValue = ", intReturnValue, ", strMessage = ", strMessage);
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::ExecuteProtocol", intReturnValue, strTrace);
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_ExecuteProtocol:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function HandOverSimulationModeForAllLocalSMTs( variable i_blnSimulationON ) void {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: HandOverSimulationModeForAllLocalSMTs <<<<<<<<<<"));
    _blnSimulationModeON = i_blnSimulationON;
    Trace ("Simulation mode for NGSStarPrep SMT:  ", _blnSimulationModeON);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: HandOverSimulationModeForAllLocalSMTs <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_ReadNormFile( device & ML_STAR, variable i_strNormalizationFile, variable & o_fltTotalBufferVolume_uL, variable & io_intNumberOfSamples ) void {
    private dialog customDialog_10;
    private variable Answer_WarningVolume;
    private file file1;
    private variable fltBufferVolume;
    private variable fltTotalBufferVolume_uL;
    private variable fltSampleConcentration;
    private variable strWellID_Source;
    private variable strWellID_Pool;
    private variable intCounterLinesInTheFile;
    o_fltTotalBufferVolume_uL = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_ReadNormFile <<<<<<<<<<"));
    MECC::TraceComment(Translate("Get the values from the Normalization File.  \nAssumptions:\nThe File must be a comma separated txt or csv file. \nThe file must have at least 2 columns, headed by \"SourceWell\" and \"Volume\" (buffer volume)\nThe volume of buffer required per well must be less than or equal to 600.\n\n"));
    file1.AddField("SourceWell", strWellID_Source, hslString, 255);
    file1.AddField("nM", fltSampleConcentration, hslFloat);
    file1.AddField("PoolWell", strWellID_Pool, hslString, 255);
    if( 0 == file1.Open(i_strNormalizationFile + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strNormalizationFile, "HxMetEdCompCmd");
    }
    fltTotalBufferVolume_uL = 0;
    {
      intCounterLinesInTheFile = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        intCounterLinesInTheFile = intCounterLinesInTheFile + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        fltBufferVolume = fltSampleConcentration - 10;
        fltBufferVolume = MthRound(fltBufferVolume, 1);
        Trace ("Source well ", strWellID_Source, ", Concentration (nM) = ", fltSampleConcentration, ", so Buffer Volume is ", fltBufferVolume, "ul.");
        fltTotalBufferVolume_uL = fltTotalBufferVolume_uL + fltBufferVolume;
        if (fltBufferVolume > 600)
        {
          customDialog_10.InitCustomDialog("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");
          customDialog_10.SetCustomDialogProperty( "textBlock3.Text", strWellID_Source );
          customDialog_10.ShowCustomDialog();
          Answer_WarningVolume = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
          if (Answer_WarningVolume == ASWGLOBAL::DIALOG::OK)
          {
            fltBufferVolume = 600;
            Trace ("WARNING!  For source well ", strWellID_Source, ", ", fltBufferVolume, "ul total buffer will be pipetted.");
          }
          else
          {
            abort;
          }
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    io_intNumberOfSamples = intCounterLinesInTheFile;
    fltTotalBufferVolume_uL = fltTotalBufferVolume_uL / 1000;
    fltTotalBufferVolume_uL = MthCeiling(fltTotalBufferVolume_uL);
    o_fltTotalBufferVolume_uL = fltTotalBufferVolume_uL;
    Trace ("Total Buffer Volume (mL) = ", fltTotalBufferVolume_uL);
    Trace ("Number of samples = ", io_intNumberOfSamples);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_ReadNormFile <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_ReadSamplePlateFile( variable & io_strSamplePlateFile, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & io_arrIndex1SeqPositions[], variable & io_arrIndex2SeqPositions[], variable & io_arrALPseqPositions[], variable i_strTempSamplePlateFileName ) void {
    private variable strFileName;
    private variable i_strTempSamplePlateFileName2;
    private variable LoopCounter1;
    private variable loopCounter1;
    private variable strDirectoryName;
    private file file1;
    private file file2;
    private file file3;
    private variable strColumn1data;
    private variable strColumn2data;
    private variable strColumn3data;
    private variable strColumn4data;
    private variable strColumn1_Well;
    private variable strColumn2_ID;
    private variable strColumn3_Index1;
    private variable strColumn4_Index2;
    private variable strColumn5_Row;
    private variable intColumn6_Column;
    private variable strColumn6_Column;
    private variable strIndex1_ID;
    private variable strIndex2_ID;
    private variable strWellID_Row;
    private variable intWellID_Column;
    private variable strWellIDconcat;
    private variable strIndex1_Position;
    private variable strIndex2_Position;
    private variable strSQLStatement;
    o_intNumberOfSamples = 0;
    o_intIndexesUsedSetting = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_ReadSamplePlateFile <<<<<<<<<<"));
    strDirectoryName = HSLExtensions::File::GetDirectoryName(i_strTempSamplePlateFileName);
    strFileName = HSLExtensions::File::GetFileNameWithoutExtension(i_strTempSamplePlateFileName);
    i_strTempSamplePlateFileName2 = StrConcat4(strDirectoryName, Translate("\\"), strFileName, Translate("2.xls"));
    Trace ("Temp Sample Plate File Name 1:  ", i_strTempSamplePlateFileName);
    Trace ("Temp Sample Plate File Name 2:  ", i_strTempSamplePlateFileName2);
    onerror goto errLabel_11 ;
    err.Clear();
    HSLExtensions::File::Delete(i_strTempSamplePlateFileName);
    HSLExtensions::File::Delete(i_strTempSamplePlateFileName2);
    errLabel_11 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    MECC::TraceComment(Translate("Write the original data to an xls file and find the number of indexes used."));
    file1.AddField(1, strColumn1data, hslString, 255);
    file1.AddField(2, strColumn2data, hslString, 255);
    file1.AddField(3, strColumn3data, hslString, 255);
    file1.AddField(4, strColumn4data, hslString, 255);
    file1.SetDelimiter(hslTabDelimited);
    if( 0 == file1.Open(io_strSamplePlateFile, hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, io_strSamplePlateFile, "HxMetEdCompCmd");
    }
    file2.AddField("Well", strColumn1data, hslString, 255);
    file2.AddField("SampleID", strColumn2data, hslString, 255);
    file2.AddField("Index1", strColumn3data, hslString, 255);
    file2.AddField("Index2", strColumn4data, hslString, 255);
    if( 0 == file2.Open(i_strTempSamplePlateFileName + " " + "Sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strTempSamplePlateFileName, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == file2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (strColumn1data == "IndexReads")
        {
          MECC::TraceComment(Translate("Found the number of indexes"));
          o_intIndexesUsedSetting = strColumn2data;
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
    strSQLStatement = StrConcat4(Translate("SELECT * FROM ["), Translate("Sheet1$"), Translate("] WHERE [SampleID] IS NOT NULL"), Translate(""));
    file2.SetExtendedProperties( "IMEX=1");
    file2.AddField("Well", strColumn1_Well, hslString, 255);
    file2.AddField("SampleID", strColumn2_ID, hslString, 255);
    file2.AddField("Index1", strColumn3_Index1, hslString, 255);
    file2.AddField("Index2", strColumn4_Index2, hslString, 255);
    if( 0 == file2.Open(i_strTempSamplePlateFileName + " " + "Sheet1$", hslRead, strSQLStatement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strTempSamplePlateFileName, "HxMetEdCompCmd");
    }
    file2.Seek(5, hslCurrent);
    file3.AddField("Well", strColumn1_Well, hslString, 255);
    file3.AddField("SampleID", strColumn2_ID, hslString, 255);
    file3.AddField("Index1", strColumn3_Index1, hslString, 255);
    file3.AddField("Index2", strColumn4_Index2, hslString, 255);
    file3.AddField("Row", strColumn5_Row, hslString, 255);
    file3.AddField("Column", intColumn6_Column, hslInteger);
    if( 0 == file3.Open(i_strTempSamplePlateFileName2 + " " + "Sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strTempSamplePlateFileName2, "HxMetEdCompCmd");
    }
    {
      LoopCounter1 = 0;
      while (
         (file2.Eof() == 0)
      )
      {
        LoopCounter1 = LoopCounter1 + 1;
        if( 0 == file2.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        strColumn5_Row = StrLeft(strColumn1_Well, 1);
        strColumn6_Column = StrRight(strColumn1_Well, 2);
        intColumn6_Column = StrIVal(strColumn6_Column);
        if( 0 == file3.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
    if( 0 != file3.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file3.RemoveFields();
    file3.AddField("Well", strWellIDconcat, hslString, 255);
    file3.AddField("SampleID", strColumn2_ID, hslString, 255);
    file3.AddField("Index1", strIndex1_ID, hslString, 255);
    file3.AddField("Index2", strIndex2_ID, hslString, 255);
    file3.AddField("Row", strWellID_Row, hslString, 255);
    file3.AddField("Column", intWellID_Column, hslInteger);
    if( 0 == file3.Open(i_strTempSamplePlateFileName2 + " " + "Sheet1$", hslRead, "SELECT * FROM [Sheet1$] ORDER BY [Column] ASC, [Row] ASC") )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strTempSamplePlateFileName2, "HxMetEdCompCmd");
    }
    io_arrIndex1SeqPositions.SetSize(0);
    io_arrIndex2SeqPositions.SetSize(0);
    io_arrALPseqPositions.SetSize(0);
    o_intIndexesUsedSetting = StrIVal(o_intIndexesUsedSetting);
    {
      o_intNumberOfSamples = 0;
      while (
         (file3.Eof() == 0)
      )
      {
        o_intNumberOfSamples = o_intNumberOfSamples + 1;
        if( 0 == file3.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        strWellIDconcat = StrConcat2(strWellID_Row, intWellID_Column);
        io_arrALPseqPositions.AddAsLast(strWellIDconcat);
        if (o_intIndexesUsedSetting >= 1)
        {
          strIndex1_Position = StrRight(strIndex1_ID, 2);
          strIndex1_Position = StrTrimLeft(strIndex1_Position, Translate("0"));
          io_arrIndex1SeqPositions.AddAsLast(strIndex1_Position);
        }
        if (o_intIndexesUsedSetting >= 2)
        {
          strIndex2_Position = StrRight(strIndex2_ID, 2);
          strIndex2_Position = StrTrimLeft(strIndex2_Position, Translate("0"));
          io_arrIndex2SeqPositions.AddAsLast(strIndex2_Position);
        }
        Trace ("Well:  ", strWellIDconcat, " ----- Index1 ID:  ", strIndex1_ID, " ----- Index2 ID:  ", strIndex2_ID);
      }
    }
    if( 0 != file3.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file3.RemoveFields();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: DATA_ReadSamplePlateFile <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_ReadSampleSheet( variable & io_strSourceFileSampleSheet, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & io_arrIndex1SeqPositions[], variable & io_arrIndex2SeqPositions[], variable & io_arrALPseqPositions[], variable i_strTempSampleSheetFileName ) void {
    private variable strDirectoryOfTempSampleSheetFileName;
    private variable LoopCounter1;
    private variable strFullpathSchemaIniFile;
    private file file1;
    private file file2;
    private variable strColumn1data;
    private variable strIndex1_ID;
    private variable strIndex2_ID;
    private variable strIndex1_Position;
    private variable strIndex2_Position;
    private variable intLineWellDataHeader;
    private variable strWellID;
    private variable strWellID_Column;
    private variable strWellID_Row;
    private variable intReturnValueFound0;
    private variable intResultReplacement;
    private variable intResultStringFound;
    o_intNumberOfSamples = 0;
    o_intIndexesUsedSetting = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_ReadSampleSheet <<<<<<<<<<"));
    Trace ("Temp Sample Sheet File Name 1:  ", i_strTempSampleSheetFileName);
    file1.AddField("F1", strColumn1data, hslString, 255);
    file1.SetDelimiter(hslTabDelimited);
    if( 0 == file1.Open(io_strSourceFileSampleSheet, hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, io_strSourceFileSampleSheet, "HxMetEdCompCmd");
    }
    file2.AddField(1, strColumn1data, hslString, 255);
    file2.SetDelimiter(hslCSVDelimited);
    if( 0 == file2.Open(i_strTempSampleSheetFileName, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strTempSampleSheetFileName, "HxMetEdCompCmd");
    }
    file1.Seek(1, hslCurrent);
    MECC::TraceComment(Translate("Read and trace out the data from the Sample Sheet:"));
    {
      LoopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        LoopCounter1 = LoopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Trace (strColumn1data);
        intResultStringFound = StrFind(strColumn1data, Translate("Sample_Well"));
        if (intResultStringFound != -1)
        {
          MECC::TraceComment(Translate("Found the line with the headers for the well data...."));
          intLineWellDataHeader = LoopCounter1;
          MECC::TraceComment(Translate("Header row found.  Determine how many, if any, indexes will be used in this run."));
          intResultReplacement = StrReplace(strColumn1data, Translate("Index_ID"), Translate(""));
          Trace ("***** (Found ", intResultReplacement, " Index ID(s).)");
          o_intIndexesUsedSetting = intResultReplacement;
        }
        if (intLineWellDataHeader > 0)
        {
          if( 0 == file2.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
    RemoveTextDelimitersFromAsciiTextFile(i_strTempSampleSheetFileName);
    strDirectoryOfTempSampleSheetFileName = HSLExtensions::File::GetDirectoryName(i_strTempSampleSheetFileName);
    strFullpathSchemaIniFile = StrConcat2(i_strTempSampleSheetFileName, Translate("\\schema.ini"));
    HSLExtensions::File::Delete(strFullpathSchemaIniFile);
    MECC::TraceComment(Translate("Reread the file to get the number of samples and any index data."));
    if (o_intIndexesUsedSetting == 0)
    {
      MECC::TraceComment(Translate("***** No \"Index_ID\" found.  Adapter Indexes will not be used in this run."));
      file2.AddField("Sample_Well", strWellID, hslString, 255);
      file2.SetDelimiter(hslCSVDelimited);
      if( 0 == file2.Open(i_strTempSampleSheetFileName, hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strTempSampleSheetFileName, "HxMetEdCompCmd");
      }
    }
    if (o_intIndexesUsedSetting == 1)
    {
      MECC::TraceComment(Translate("***** One Index Found *****"));
      file2.AddField("Sample_Well", strWellID, hslString, 255);
      file2.AddField("I7_", strIndex1_ID, hslString, 255);
      file2.SetDelimiter(hslCSVDelimited);
      if( 0 == file2.Open(i_strTempSampleSheetFileName, hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strTempSampleSheetFileName, "HxMetEdCompCmd");
      }
    }
    if (o_intIndexesUsedSetting == 2)
    {
      MECC::TraceComment(Translate("***** Two Indexes Found *****"));
      file2.AddField("Sample_Well", strWellID, hslString, 255);
      file2.AddField("I7_", strIndex1_ID, hslString, 255);
      file2.AddField("I5_", strIndex2_ID, hslString, 255);
      file2.SetDelimiter(hslCSVDelimited);
      if( 0 == file2.Open(i_strTempSampleSheetFileName, hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strTempSampleSheetFileName, "HxMetEdCompCmd");
      }
    }
    io_arrIndex1SeqPositions.SetSize(0);
    io_arrIndex2SeqPositions.SetSize(0);
    io_arrALPseqPositions.SetSize(0);
    {
      o_intNumberOfSamples = 0;
      while (
         (file2.Eof() == 0)
      )
      {
        o_intNumberOfSamples = o_intNumberOfSamples + 1;
        if( 0 == file2.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        intReturnValueFound0 = StrFind(strWellID, Translate("0"));
        if (intReturnValueFound0 != -1)
        {
          strWellID_Row = StrLeft(strWellID, 1);
          strWellID_Column = StrRight(strWellID, 2);
          strWellID_Column = StrIVal(strWellID_Column);
          strWellID = StrConcat2(strWellID_Row, strWellID_Column);
        }
        io_arrALPseqPositions.AddAsLast(strWellID);
        if (o_intIndexesUsedSetting >= 1)
        {
          strIndex1_Position = StrRight(strIndex1_ID, 2);
          strIndex1_Position = StrTrimLeft(strIndex1_Position, Translate("0"));
          io_arrIndex1SeqPositions.AddAsLast(strIndex1_Position);
        }
        if (o_intIndexesUsedSetting >= 2)
        {
          strIndex2_Position = StrRight(strIndex2_ID, 2);
          strIndex2_Position = StrTrimLeft(strIndex2_Position, Translate("0"));
          io_arrIndex2SeqPositions.AddAsLast(strIndex2_Position);
        }
        Trace ("Well:  ", strWellID, "  Index1 Position in carrier:  ", strIndex1_Position, "  Index2 Position in carrier:  ", strIndex2_Position);
      }
    }
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_ReadSampleSheet <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_DownloadProtocol( variable i_IntDeviceNumber, variable i_strProtocollFullFileName ) void {
    private variable blnReturn;
    private variable intReturnValue;
    private variable strMessage;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_DownloadProtocol:  Start Submethod <<<<<<<<<<"));
    Trace ("------- ODTC device script to be perfomed: ", i_strProtocollFullFileName);
    blnReturn = Inheco_ODTC::Standard::DownloadProtocol(i_IntDeviceNumber, Translate(""), i_strProtocollFullFileName, intReturnValue, strMessage);
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::DownloadProtocol", intReturnValue, strMessage);
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_DownloadProtocol:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_ReadInputWorklistExcelFormat( variable & io_strSamplePlateFile, sequence & io_seqSourcePlateTemplate, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & io_arrIndex1SeqPositions[], variable & io_arrIndex1IDs[], variable & io_arrIndex2SeqPositions[], variable & io_arrIndex2IDs[], variable & io_arrALPseqLabID[], variable & io_arrALPseqPositions[], variable & o_IndexLabwareFormat ) void {
    private variable fileInputWkl_Sample_ID;
    private variable fileInputWkl_Sample_Position;
    private variable fileInputWkl_Index1_Pos;
    private variable fileInputWkl_Index2_Pos;
    private variable loopCounter2;
    private variable fileInputWkl_Index2_ID;
    private variable fileInputWkl_Index1_ID;
    private file fileInputWkl;
    private variable io_arrSampleSeqPositions[];
    private variable io_arrSampleID[];
    private variable io_arrIndex1ID[];
    private variable io_arrIndex2ID[];
    private variable intSizeArrIndex2Positions;
    private variable intSizeArrIndex1Positions;
    private variable strTempLabIDSrcSeq;
    private variable blnPositionFound;
    private variable intReturnFromArray;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable arr_strCoordinateLetter[];
    private variable strCoordinate;
    private variable arr_strCoordinates[];
    o_intNumberOfSamples = 0;
    o_intIndexesUsedSetting = 0;
    o_IndexLabwareFormat = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_ReadInputWorklistExcelFormat <<<<<<<<<<"));
    io_seqSourcePlateTemplate.SetCurrentPosition(1);
    strTempLabIDSrcSeq = SeqGetLabwareId(io_seqSourcePlateTemplate);
    io_arrSampleID.SetSize(0);
    io_arrSampleSeqPositions.SetSize(0);
    io_arrIndex1ID.SetSize(0);
    io_arrIndex1SeqPositions.SetSize(0);
    io_arrIndex2ID.SetSize(0);
    io_arrIndex2SeqPositions.SetSize(0);
    io_arrALPseqLabID.SetSize(0);
    fileInputWkl.AddField("Sample_ID", fileInputWkl_Sample_ID, hslString, 255);
    fileInputWkl.AddField("Sample_Position", fileInputWkl_Sample_Position, hslString, 255);
    fileInputWkl.AddField("Index1_ID", fileInputWkl_Index1_ID, hslString, 255);
    fileInputWkl.AddField("Index1_Pos", fileInputWkl_Index1_Pos, hslString, 255);
    fileInputWkl.AddField("Index2_ID", fileInputWkl_Index2_ID, hslString, 255);
    fileInputWkl.AddField("Index2_Pos", fileInputWkl_Index2_Pos, hslString, 255);
    if( 0 == fileInputWkl.Open(io_strSamplePlateFile + " " + "Sheet1$", hslRead, "Select * from [Sheet1$] where [Sample_Position] is not null") )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, io_strSamplePlateFile, "HxMetEdCompCmd");
    }
    {
      loopCounter2 = 0;
      while (
         (fileInputWkl.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        APPSLIB::TraceValues(Translate("Records in Excel File: "), loopCounter2, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        if( 0 == fileInputWkl.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        io_arrSampleID.AddAsLast(fileInputWkl_Sample_ID);
        io_arrALPseqLabID.AddAsLast(strTempLabIDSrcSeq);
        io_arrALPseqPositions.AddAsLast(fileInputWkl_Sample_Position);
        io_arrIndex1IDs.AddAsLast(fileInputWkl_Index1_ID);
        io_arrIndex1SeqPositions.AddAsLast(fileInputWkl_Index1_Pos);
        io_arrIndex2IDs.AddAsLast(fileInputWkl_Index2_ID);
        io_arrIndex2SeqPositions.AddAsLast(fileInputWkl_Index2_Pos);
      }
    }
    Util2::Debug::TraceArray_3(Translate(" Arrays of Positions for Samples and Indexes"), io_arrALPseqPositions, io_arrIndex1SeqPositions, io_arrIndex2SeqPositions);
    Util2::Debug::TraceArray_3(Translate(" Arrays of ID for Samples and Indexes"), io_arrSampleID, io_arrIndex1IDs, io_arrIndex2IDs);
    arr_strCoordinateLetter.SetSize(0);
    arr_strCoordinateLetter.AddAsLast(Translate("A"));
    arr_strCoordinateLetter.AddAsLast(Translate("B"));
    arr_strCoordinateLetter.AddAsLast(Translate("C"));
    arr_strCoordinateLetter.AddAsLast(Translate("D"));
    arr_strCoordinateLetter.AddAsLast(Translate("E"));
    arr_strCoordinateLetter.AddAsLast(Translate("F"));
    arr_strCoordinateLetter.AddAsLast(Translate("G"));
    arr_strCoordinateLetter.AddAsLast(Translate("H"));
    arr_strCoordinates.SetSize(0);
    {
      for(loopCounter3 = 0; loopCounter3 < 12;)
      {
        loopCounter3 = loopCounter3 + 1;
        {
          for(loopCounter4 = 0; loopCounter4 < 8;)
          {
            loopCounter4 = loopCounter4 + 1;
            strCoordinate = StrConcat2(arr_strCoordinateLetter.ElementAt( loopCounter4 -1), loopCounter3);
            arr_strCoordinates.AddAsLast(strCoordinate);
          }
        }
      }
    }
    blnPositionFound = APPSLIB::ArrayLookup(arr_strCoordinates, io_arrIndex1SeqPositions.ElementAt( 1 -1), intReturnFromArray);
    if (blnPositionFound == ASWGLOBAL::BOOL::TRUE)
    {
      o_IndexLabwareFormat = Translate("plate");
    }
    else
    {
      o_IndexLabwareFormat = Translate("tube");
    }
    o_intNumberOfSamples=io_arrSampleID.GetSize();
    intSizeArrIndex1Positions=io_arrIndex1SeqPositions.GetSize();
    intSizeArrIndex2Positions=io_arrIndex2SeqPositions.GetSize();
    if (intSizeArrIndex2Positions != 0)
    {
      o_intIndexesUsedSetting = 2;
    }
    else
    {
      if (intSizeArrIndex1Positions == 0)
      {
        o_intIndexesUsedSetting = 0;
      }
      else
      {
        o_intIndexesUsedSetting = 1;
      }
    }
    if( 0 != fileInputWkl.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileInputWkl.RemoveFields();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: DATA_ReadSamplePlateFile <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_WaitForLidAndBlockCorrectTemperature( variable i_IntDeviceNumber, variable i_RequestedBlockTemperature, variable i_RequestedLidTemperature ) void {
    private variable strState;
    private variable strDeviceID;
    private variable blnReturn;
    private variable strTrace;
    private variable intReturnValue;
    private variable strCurrentTime;
    private variable blnLocked;
    private variable strMessage;
    private variable strPmsID;
    private variable strTime;
    private variable arrStrActualTemperatures[];
    private variable arrFltActualTemperatures[];
    private variable fltActualLidTemperature;
    private variable fltActualMountTemperature;
    private variable fltMaxAllowedLidTemperature;
    private variable fltMinAllowedLidTemperature;
    private variable fltMinAllowedMountTemperature;
    private variable fltMaxAllowedMountTemperature;
    private variable loopCounter1;
    private timer timerWaitForTemperature;
    private variable intLidTemperature;
    private variable intMountTemperature;
    private variable intTemperatureLidMount;
    private variable repeatLoop;
    private variable intEvaluatingTemperature;
    private dialog dialogHandle_12;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_WaitForLidAndBlockCorrectTemperature:  Start Submethod <<<<<<<<<<"));
    Trace ("------- Requested Block Temperature: ", i_RequestedBlockTemperature);
    Trace ("------- Requested Lid   Temperature: ", i_RequestedLidTemperature);
    fltMaxAllowedLidTemperature = i_RequestedLidTemperature + 15;
    fltMinAllowedLidTemperature = i_RequestedLidTemperature - 5;
    fltMaxAllowedMountTemperature = i_RequestedBlockTemperature + 0.5;
    fltMinAllowedMountTemperature = i_RequestedBlockTemperature - 0.5;
    blnReturn = Inheco_ODTC::Standard::GetStatus(i_IntDeviceNumber, strDeviceID, strState, blnLocked, strPmsID, strCurrentTime, intReturnValue, strMessage);
    strTrace = StrConcat12("strDeviceID = ", strDeviceID, ", strState = ", strState, ", blnLocked = ", blnLocked, ", strPMSID = ", strPmsID, ", strCurrentDeviceTime = ", strCurrentTime, ", intReturnValue = ", intReturnValue);
    strTrace = StrConcat4(strTrace, ", strMessage = ", strMessage, "");
    _ODTC_HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strTrace);
    Inheco_ODTC::Standard::ReadActualTemperature(i_IntDeviceNumber, Translate(""), strTime, arrFltActualTemperatures, arrStrActualTemperatures, intReturnValue, strMessage);
    _ODTC_HandleReturnValue(blnReturn, "Inheco_ODTC::Standard::ReadActualTemperature", intReturnValue, strMessage);
    fltActualLidTemperature=arrFltActualTemperatures.GetAt(4-1);
    fltActualMountTemperature=arrFltActualTemperatures.GetAt(6-1);
    Trace ("------- Actual Block Temperature: ", fltActualMountTemperature);
    Trace ("------- Actual Lid   Temperature: ", fltActualLidTemperature);
    repeatLoop = 1;
    intEvaluatingTemperature = 0;
    {
      loopCounter1 = 0;
      while (1 == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == timerWaitForTemperature.SetTimer(10) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timerWaitForTemperature.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        intMountTemperature = 0;
        intLidTemperature = 0;
        Inheco_ODTC::Standard::ReadActualTemperature(i_IntDeviceNumber, Translate(""), strTime, arrFltActualTemperatures, arrStrActualTemperatures, intReturnValue, strMessage);
        _ODTC_HandleReturnValue(blnReturn, "Inheco_ODTC::Standard::ReadActualTemperature", intReturnValue, strMessage);
        fltActualLidTemperature=arrFltActualTemperatures.GetAt(4-1);
        fltActualMountTemperature=arrFltActualTemperatures.GetAt(6-1);
        Trace ("------- Actual Block Temperature: ", fltActualMountTemperature);
        Trace ("------- Actual Lid   Temperature: ", fltActualLidTemperature);
        Trace ("------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- -------");
        if (fltActualLidTemperature >= fltMinAllowedLidTemperature)
        {
          if (fltActualLidTemperature <= fltMaxAllowedLidTemperature)
          {
            intLidTemperature = 1;
          }
          else
          {
            intLidTemperature = 0;
          }
        }
        else
        {
          intLidTemperature = 0;
        }
        if (intLidTemperature == 0)
        {
          Trace ("-------  Requested Lid Temperature = ",i_RequestedLidTemperature," not reached yet. Current Lid Temperature ", fltActualLidTemperature );
          Trace ("------- Minimum Lid Temperature allowed: ", fltMinAllowedLidTemperature);
          Trace ("------- Maximum Lid Temperature allowed: ", fltMaxAllowedLidTemperature);
          Trace ("------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- -------");
        }
        if (fltActualMountTemperature >= fltMinAllowedMountTemperature)
        {
          if (fltActualMountTemperature <= fltMaxAllowedMountTemperature)
          {
            intMountTemperature = 1;
          }
          else
          {
            intMountTemperature = 0;
          }
        }
        else
        {
          intMountTemperature = 0;
        }
        if (intMountTemperature == 0)
        {
          Trace ("-------  Requested Block Temperature = ",i_RequestedBlockTemperature," not reached yet. Current Block Temperature ", fltActualMountTemperature );
          Trace ("------- Minimum Block Temperature allowed: ", fltMinAllowedMountTemperature);
          Trace ("------- Maximum Block Temperature allowed: ", fltMaxAllowedMountTemperature);
          Trace ("------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- -------");
        }
        intTemperatureLidMount = intLidTemperature + intMountTemperature;
        if (intTemperatureLidMount == 2)
        {
          Trace ("------- Temperatures for Block and Lid have been reached. Now evaluating stability...");
          intEvaluatingTemperature = intEvaluatingTemperature + 1;
          if (intEvaluatingTemperature == 3)
          {
            break;
          }
        }
        if (loopCounter1 == 50)
        {
          dialogHandle_12.SetOutput(Translate(" ERROR Could not reach temperatures"));
          dialogHandle_12.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, 5);
          break;
        }
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_WaitForLidAndBlockCorrectTemperature:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }
} // library namespace
