#pragma once
#include "HSLSeqLib.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLMthLib.hsl"
#include "VirtualLabware\\VirtualLabware.hsl"
#include "HSLTrcLib.hsl"
#include "SMT\\MLSTARLiquidClassLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLTipCountingLib.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLTimLib.hsl"
#include "ASWStandardDialogs\\AswStatusDialog.hsl"
#include "HslHamHeaterShakerLib.hsl"
#include "RemoveTextDelimiters\\RemoveTextDelimitersFromAsciiTextFile.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLDevLib.hsl"
#include "ASWStandardDialogs\\ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\MethodSpecificLibraries\\ReformatString.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLSTCCLib.hs_"

namespace NGSSTARPROCESSES {
  sequence seq_Tips50;
  sequence seq_Tips1000;
  sequence seq_Tips300;
  variable _intTransportTool;
  sequence seq_COREGripper;
  timer ProccessTimer;
  variable _blnSimulationModeON;
  variable _strFullPathReportFile;
  file NGSStarReportFile;
  variable _intConsumedTips1000;
  variable _intConsumedTips300;
  variable _intConsumedTips50;
  sequence seq_Tips300MPH;
  variable _intConsumedTips300MPH;
  variable _intMaxSeqTips1000AfterEdit;
  variable _intMaxSeqTips300MPHAfterEdit;
  variable _intMaxSeqTips300AfterEdit;
  variable _intMaxSeqTips50AfterEdit;
  variable _intConsumedTips300BeforeRelaodTips;
  variable _intConsumedTips1000BeforeRelaodTips;
  variable _intConsumedTips300MPHBeforeRelaodTips;
  variable _intConsumedTips50BeforeRelaodTips;
  variable _intTotalConsumedTips50;
  variable _intTotalConsumedTips1000;
  variable _intTotalConsumedTips300MPH;
  variable _intTotalConsumedTips300;
  sequence seq_Tips300MPHShiftedTipPickupPosition;
  variable _blnDeactivatePipettingStepsForTransportTests;
  variable _blnInsuffientTips;
  variable _intNumberOfCompleteColumns;
  variable _intRemainingWells;
  variable _intStartPositionTip1000;
  variable _intStartPositionTip300;
  variable _intStartPositionTip300MPH;
  variable _intStartPositionTip50;
  variable _strTipCounterNameTip1000;
  variable _strTipCounterNameTip300;
  variable _strTipCounterNameTip300MPH;
  variable _strTipCounterNameTip50;
  private function Abstract(  ) void ;
  function DATA_CheckPlatesInStacks( device & ML_STAR, sequence & i_seqStack1, sequence & i_seqStack2, sequence & i_seqStack3, sequence & i_seqStack4, variable i_intStack1ExpectedNumberOfPlates, variable i_intStack2ExpectedNumberOfPlates, variable i_intStack3ExpectedNumberOfPlates, variable i_intStack4ExpectedNumberOfPlates, variable & o_intResultCheckOfFalseLoading, variable & o_strMessageResult ) void ;
  function DATA_HandoverSequencesAndDataToSMT( sequence & i_seqTip50Filter, sequence & i_seqTip300Filter, sequence & i_seqTip300FilterMPH, sequence & i_seqTip300FilterMPHShiftedTipPickupPosition, sequence & i_seqTip1000Filter, sequence & i_seqCOREGripper, variable i_intTransportTool, variable i_blnSimulationON, variable i_strKitName, variable i_blnDeactivatePipettingStepsForTransportTests ) void ;
  function DATA_IncubationTimer( timer & i_strIncubationTimerName, variable i_intTime ) void ;
  function DATA_OverdryingProtection( timer & i_strOverdryingTimerName, variable i_intIncubationTimeForTheFollowingStep, variable i_blnStartNewTimer, variable & o_intIncubationTimeForTheFollowingStepModified ) void ;
  function DATA_TipCounterRead( device & ML_STAR, variable i_intNumberOfTip50_required, variable i_intNumberOfTip300_required, variable i_intNumberOfTip300MPH_required, variable i_intNumberOfTip1000_required, variable i_intTipTypeToBeProcessed, variable i_blnAlwaysEditTipcounter, variable i_blnShowGUITipAndTimeCalculation ) void ;
  function DATA_TipCounterWrite( device & ML_STAR ) void ;
  function DATA_UpdateInformationIntoReportFile( variable i_strInformationToUpdateReportList, variable i_blnUpdateInformationIntoReportFile ) void ;
  function PIP_BeadsFromTubesOrTroughToPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolBeads, variable i_strLiquidClassNameTransfer, variable i_strLiquidClassNameMixing, variable i_blnTipExchangeDuringTransfer, sequence seq_Mixing, variable i_blnMixWithSVFT, variable i_blnUpdateInformationIntoReporFile ) void ;
  function PIP_BeadsFromTubesOrTroughToPlate_OLD( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolBeads, variable i_strLiquidClassNameTransfer, variable i_blnTipExchangeDuringTransfer, sequence seq_Mixing, variable i_blnMixWithSVFT, variable i_blnUpdateInformationIntoReporFile ) void ;
  function PIP_EtOH_HVFTMultidispenseFromTroughToPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_strLiquidClassNameTransfer, variable & io_fltTrackingEthanolVolume, variable i_blnUpdateInformationIntoReporFile ) void ;
  function PIP_IndexAdapters_LVFT_AccordingToInputSequences( device & ML_STAR, sequence & i_seqIndexAdapters, sequence & i_seqAdapterLigationPlate, variable i_strLiquidClassName, variable i_fltVolumeAdapter, variable i_intMixCycles, variable i_fltVolumeMix, variable i_blnUpdateInformationIntoReporFile ) void ;
  function PIP_IndexAdapters_LVFT_FromTubesORPlateIntoPlate( device & ML_STAR, sequence & i_seqIndexAdapters, sequence & i_seqAdapterLigationPlate, variable & io_arrIndex1Positions[], variable & io_arrIndex2Positions[], variable & io_arrAdaptorLigationPlatePositions[], variable i_strLiquidClassName, variable i_fltVolumeAdapter, variable i_intMixCycles, variable i_fltVolumeMix, variable i_blnUpdateInformationIntoReporFile ) void ;
  function PIP_Liquid_SingleDispenseFromPlateToPlate( device & ML_STAR, sequence & i_seq_AspirationPosition, sequence & i_seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMix, variable i_fltAspirationFixHeight, variable i_fltDispenseFixHeight, variable i_blnTouchOffOnAspirate, variable i_blnLiquidFollowingOnDispense, variable i_blnUpdateInformationIntoReporFile ) void ;
  function PIP_Normalize_LVFTForSampleTransferSVFTForBufferTransfer( device & ML_STAR, variable i_strNormalizationFile, sequence & io_seqBuffer, sequence & io_seqSourcePlate, sequence & io_seqDestinationPlate, variable i_strLiquidClassNameTransferBUFFER, variable i_strLiquidClassNameTransferSAMPLE, sequence & io_seqPlateSeqForJustBuffer, sequence & io_seqPoolingPlate, variable i_blnUpdateInformationIntoReporFile ) void ;
  function PIP_OIL_LVFTSingleDispenseFromTroughToPlate( device & ML_STAR, sequence & i_seqDestinationHardShellPlate, sequence & i_seqOil, variable i_blnUpdateInformationIntoReporFile ) void ;
  function PIP_Pool_LVFT_SingleDispenseFromPlateToPlate( device & ML_STAR, sequence & i_seq_NormPlate, sequence & i_seq_PoolingPlate, variable i_strLiquidClassNameTransfer, variable & i_str_NormalizationFile, variable i_blnUpdateInformationIntoReporFile ) void ;
  function PIP_Reagent_SVFT_MPHSingleDispenseFromPlateToPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intNumberOfSamples, variable i_fltMixVolumeAfterDispense, variable i_intMixCycles, variable i_blnUpdateInformationIntoReporFile ) void ;
  function PIP_ReagentsFromTubeOrTroughOrPlateToPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_blnTipExchangeDuringTransfer, variable i_intMixCycles, variable i_fltVolumeMix, variable i_fltDispenseHeightFromBottom, variable i_fltAspirateHeightFromBottom, variable i_blnUpdateInformationIntoReporFile ) void ;
  function PIP_ReagentsFromTubePlateOrTroughToPlateAccordingToSequencesAndVolumeArray( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable & i_arrFltVolume[], variable i_strLiquidClassNameTransfer, variable i_blnTipExchangeDuringTransfer, variable i_intMixCycles, variable i_blnUpdateInformationIntoReporFile ) void ;
  function PIP_SerialDilutionAccordingToSequencesAndVolumeArray( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable & i_arrFltVolume[], variable i_strLiquidClassNameTransfer, variable i_blnTipExchangeDuringTransfer, variable i_intMixCycles, variable i_blnUpdateInformationIntoReporFile ) void ;
  function PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_strLiquidClassNameTransfer2, variable i_blnUpdateInformationIntoReporFile ) void ;
  function PIP_Supernatant_SVFT_MPHSingleDispenseFromPlateToWasteMPH( device & ML_STAR, sequence & i_seqAspirationPosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intNumberOfSamples, variable i_blnUpdateInformationIntoReporFile ) void ;
  function Process_CleanUp( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, sequence & i_seqPositionHHS, sequence & i_seqAspirationPositionEthanol, sequence & i_seqMagneticStandPosition, sequence & i_seqLiquidWaste, sequence & i_seqAspirationPositionResuspensionBuffer, variable i_fltVolumeBeads, variable i_fltVolumeEthanol, variable i_fltVolumeResuspensionBuffer, variable i_fltVolumeSupernatantToWaste, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMixing, variable i_strLiquidClassEthanol, variable i_strLiquidClassResuspensionBuffer, variable i_strLiquidClassSupernatantToWaste, variable i_strLiquidClassEthanolToWaste, variable i_strLiquidClassEthanol2ndAspirationToWaste, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerDurationResuspendCleanedLibrary, variable i_intNumberOfColumnsWithinOneBatch, variable i_intShakerDevice, variable i_blnActivateBatchProcessForScaleUp, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver, variable i_blnUpdateInformationIntoReporFile ) void ;
  function Process_SizeSelection( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, variable i_fltVolumeBeadsFirstSeparation, variable i_fltVolumeBeadsSecondSeparation, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMixing, sequence & i_seqPositionHHS, variable i_intShakerDevice, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationResuspendCleanedLibrary, sequence & i_seqAspirationPositionEthanol, variable i_strLiquidClassEthanol, variable i_intNumberOfEthanolWashingLoops, sequence & i_seqAspirationPositionResuspensionBuffer, variable i_fltVolumeResuspensionBuffer, variable i_strLiquidClassResuspensionBuffer, sequence & i_seqMagneticStandPosition, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver, sequence & i_seqLiquidWaste, sequence & i_seqTransferPositionNewMidiPlate, sequence & i_trpPositionMIDIWaste, variable i_strLiquidClassNameTransfer2, variable i_blnUpdateInformationIntoReporFile ) void ;
  function Trp_HSP( device & ML_STAR, sequence & i_seqHSPStartingPosition, sequence & i_seqHSP_Destination, variable i_intTrackNumberToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode, variable i_blnUpdateInformationIntoReporFile ) void ;
  function Trp_HSPDownholder( device & ML_STAR, sequence & i_seqDownholderSourcePosition, sequence & i_seqDownholderDestinationPosition, variable i_blnParkTransportToolAfterMove, variable i_blnDownholderSourcePositionIsOnPlate, variable i_blnDownholderDestinationPositionIsOnPlate, variable i_blnUpdateInformationIntoReporFile ) void ;
  function Trp_HSPFromAndToODTCwithiSWAP( device & ML_STAR, sequence & i_seqHSPSourcePosition, sequence & i_seqHSPDestinationPosition, variable i_intTrackToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode, variable i_blnUpdateInformationIntoReporFile ) void ;
  function Trp_HamiltonComfortLidWithiSWAP( device & ML_STAR, sequence & i_seqHamiltonComfortLidSourcePosition, sequence & i_seqHamiltonComfortLidDestinationPosition, variable i_blnParkTransportToolAfterMove, variable i_blnUpdateInformationIntoReporFile ) void ;
  function Trp_MIDI( device & ML_STAR, sequence & i_seqMIDISourcePosition, sequence & i_seqMIDIDestinationPosition, variable i_intTrackToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode, variable i_blnUpdateInformationIntoReporFile ) void ;
  function Trp_TipsWithMPH( device & ML_STAR, sequence & i_seqTipPickUpPosition, sequence & i_seqTipEjectPosition, variable i_blnCountTipsAtTipPickUpPosition ) void ;
  private function _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport( variable i_strStepReturnValueAspiration, variable i_strStepReturnValueDispense ) void ;
  private function _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReportMPH( variable i_strStepReturnValueAspiration, variable i_strStepReturnValueDispense, sequence i_seqAspiration, sequence i_seqDispense, variable i_blnAnalyseAspirationSetpReturnOnly ) void ;
  private function _DATA_CalculateAndDefineBatchProcessCleanUp( variable i_intNumberOfColumnsWithinOneBatch, variable i_blnActivateBatchProcessForScaleUp, sequence & i_seqMagneticStandPosition, sequence & o_arrSeqMagneticStandPositionBatchwiseSorted[], variable & o_intNumberOfCalculatedBatchesToBeProcessed ) void ;
  private function _DATA_GetTipTypeAndDispenseModeOfLiquidClass( variable i_strLiquidClassName, variable & o_intTiptype, variable & o_intDispenseMode ) void ;
  private function _DATA_InterpreteLabwareID( variable i_strLabwareIDToBeAnalysed, variable & o_strTypeOfLabware ) void ;
  private function _DATA_PlausibilityCheckVolume( variable i_fltVolumeToBeChecked, variable i_intTipTypeToBeChecked ) void ;
  private function _DATA_TipAndTimeConsumption( variable i_blnShowDialog ) void ;
  private function _HHS_Shake( variable i_intHHS, variable i_intSpeed, variable i_intShakingDuration ) void ;
  private function _PIP_HVFTMultidispenseFromTroughToPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_blnUpdateInformationIntoReporFile ) void ;
  private function _PIP_SVFTMultidispenseFromTroughToPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_fltDispenseHeightFromBottom, variable i_blnUpdateInformationIntoReporFile ) void ;
  private function _Trp_HSPwithCOREGripper( device & ML_STAR, sequence & i_seqHSPStartingPosition, sequence & i_seqHSPDestinationPosition, variable i_intTrackNumberToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode ) void ;
  private function _Trp_MIDIwithCOREGripper( device & ML_STAR, sequence & i_seqMIDIStartingPosition, sequence & i_seqMIDIDestinationPosition, variable i_intTrackNumberToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode ) void ;
  private function _Version(  ) void ;
  function _InitLibrary() {
    REFORMATSTRING::_InitLibrary();
  }
  function _ExitLibrary() {
    REFORMATSTRING::_ExitLibrary();
  }

  private function _DATA_InterpreteLabwareID( variable i_strLabwareIDToBeAnalysed, variable & o_strTypeOfLabware ) void {
    private variable intLabwareTypeIsATrough;
    private variable intLabwareTypeIsAMIDIPlate;
    private variable intLabwareTypeIsAHSPlate;
    o_strTypeOfLabware = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>> Submethod: _DATA_InterpreteLabwareID <<<<<<<<<<"));
    intLabwareTypeIsAHSPlate = StrFind(i_strLabwareIDToBeAnalysed, Translate("HSP"));
    intLabwareTypeIsAMIDIPlate = StrFind(i_strLabwareIDToBeAnalysed, Translate("MIDI"));
    intLabwareTypeIsATrough = StrFind(i_strLabwareIDToBeAnalysed, Translate("RGT"));
    if (intLabwareTypeIsATrough >= 0)
    {
      o_strTypeOfLabware = Translate("trough");
    }
    else
    {
      if (intLabwareTypeIsAHSPlate >= 0)
      {
        o_strTypeOfLabware = Translate("plate");
      }
      else
      {
        if (intLabwareTypeIsAMIDIPlate >= 0)
        {
          o_strTypeOfLabware = Translate("plate");
        }
        else
        {
          o_strTypeOfLabware = Translate("tube");
        }
      }
    }
    Trace ("Labware ID to be analyzed :  ", i_strLabwareIDToBeAnalysed, " , Labware type used = ", o_strTypeOfLabware);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: _DATA_InterpreteLabwareID <<<<<<<<<<\n"));
  }

  function PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_strLiquidClassNameTransfer2, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable loopCounter1;
    private variable strCurrentDispenseMode;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable flt_VolumeAsp1;
    private variable flt_VolumeAsp2;
    private variable fltVolumeDelta;
    private variable retValueDialog;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private dialog customDialog_1;
    private dialog customDialog_2;
    private variable intReturnFindString;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste <<<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste"), i_blnUpdateInformationIntoReporFile);
    intReturnFindString = StrFind(i_strLiquidClassNameTransfer, Translate("Ethanol"));
    Trace("return value finding the word Ethanol within string of current liquid class (value =>0 consecutive asp activated; value <0 single asp activated) -->", intReturnFindString);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
      _DATA_PlausibilityCheckVolume(i_fltVolume, intCurrentTipType);
      fltVolumeDelta = 300 - i_fltVolume;
      if (intReturnFindString >= 0)
      {
        if (fltVolumeDelta < 20)
        {
          flt_VolumeAsp1 = 280;
          flt_VolumeAsp2 = 20;
        }
        else
        {
          flt_VolumeAsp1 = i_fltVolume - 50;
          flt_VolumeAsp2 = 50;
        }
      }
      else
      {
      }
      if (intCurrentDispenseMode == 2)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (intCurrentDispenseMode == 4)
        {
          strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (strCurrentDispenseMode == "Empty")
      {
        if (intCurrentTipType == 1)
        {
          HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
          if (intReturnFindString >= 0)
          {
            MECC::TraceComment(Translate("Ethanol is found in the liquid class name then do consecutive aspirations (two-step aspiration)"));
            {
              loopCounter1 = 0;
              while (
                 (i_seqAspirationPosition.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips300, 1, i_seqDispensePosition, 1);
                loopCounter1 = loopCounter1 + 1;
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	strStepReturnValueAspiration = arrRetValues[2];
                }
                if(0){
                  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>> consecutive aspiration step to remove residual EtOH - using touch off and asp 0.2 above bottom -  leads to tilt the MIDI plate at first and last column at MIDI on Magnet position"));
                  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
                MECC::TraceComment(Translate(">>>>>>>>>>>>>>>> consecutive aspiration step to remove residual EtOH using fix height 0.2mm above bottom"));
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
                _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                DATA_TipCounterWrite(ML_STAR);
                if (
                   (i_seqAspirationPosition.GetCurrentPosition() > 0 && i_seqAspirationPosition.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
              seq_Tips300.SetMax(seq_Tips300.GetTotal());
              i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
              i_seqAspirationPosition.SetCurrentPosition(1);
              i_seqDispensePosition.SetCurrentPosition(1);
            }
          }
          else
          {
            MECC::TraceComment(Translate("Ethanol is not found in the liquid class name then do a single aspiration (no consecutive aspiration)"));
            {
              loopCounter1 = 0;
              while (
                 (i_seqAspirationPosition.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips300, 1, i_seqDispensePosition, 1);
                loopCounter1 = loopCounter1 + 1;
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	strStepReturnValueAspiration = arrRetValues[2];
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
                _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                DATA_TipCounterWrite(ML_STAR);
                if (
                   (i_seqAspirationPosition.GetCurrentPosition() > 0 && i_seqAspirationPosition.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
              seq_Tips300.SetMax(seq_Tips300.GetTotal());
              i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
              i_seqAspirationPosition.SetCurrentPosition(1);
              i_seqDispensePosition.SetCurrentPosition(1);
            }
          }
          HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
        }
        else
        {
          MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
          customDialog_1.InitCustomDialog("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");
          customDialog_1.ShowCustomDialog();
          retValueDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
          abort;
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        customDialog_2.InitCustomDialog("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");
        customDialog_2.ShowCustomDialog();
        retValueDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, i_seqAspirationPosition);
      {
        variable _FilterIdsArray_3[];
        variable _ColumnIdsArray_3[];
        variable _ColumnNamesArray_3[];
        variable _ExperimentsArray_3[];
        _FilterIdsArray_3.SetSize(0);
        _ColumnNamesArray_3.SetSize(14);
        _ColumnIdsArray_3.SetSize(14);
        _ColumnNamesArray_3.SetAt(0, "RecordId");
        _ColumnIdsArray_3.SetAt(0, 0);
        _ColumnNamesArray_3.SetAt(1, "TRackBC");
        _ColumnIdsArray_3.SetAt(1, 1);
        _ColumnNamesArray_3.SetAt(2, "TLabwareId");
        _ColumnIdsArray_3.SetAt(2, 2);
        _ColumnNamesArray_3.SetAt(3, "TPositionId");
        _ColumnIdsArray_3.SetAt(3, 3);
        _ColumnNamesArray_3.SetAt(4, "TPositionBC");
        _ColumnIdsArray_3.SetAt(4, 4);
        _ColumnNamesArray_3.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_3.SetAt(5, 5);
        _ColumnNamesArray_3.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_3.SetAt(6, 6);
        _ColumnNamesArray_3.SetAt(7, "TVolume");
        _ColumnIdsArray_3.SetAt(7, 7);
        _ColumnNamesArray_3.SetAt(8, "SRackBC");
        _ColumnIdsArray_3.SetAt(8, 8);
        _ColumnNamesArray_3.SetAt(9, "SLabwareId");
        _ColumnIdsArray_3.SetAt(9, 9);
        _ColumnNamesArray_3.SetAt(10, "SPositionId");
        _ColumnIdsArray_3.SetAt(10, 10);
        _ColumnNamesArray_3.SetAt(11, "SPositionBC");
        _ColumnIdsArray_3.SetAt(11, 11);
        _ColumnNamesArray_3.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_3.SetAt(12, 12);
        _ColumnNamesArray_3.SetAt(13, "UserName");
        _ColumnIdsArray_3.SetAt(13, 13);
        _ExperimentsArray_3.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqDispensePosition, 3, _FilterIdsArray_3, 0, _ColumnIdsArray_3, _ColumnNamesArray_3, _ExperimentsArray_3, "SupernatantToWaste_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_IndexAdapters_LVFT_FromTubesORPlateIntoPlate( device & ML_STAR, sequence & i_seqIndexAdapters, sequence & i_seqAdapterLigationPlate, variable & io_arrIndex1Positions[], variable & io_arrIndex2Positions[], variable & io_arrAdaptorLigationPlatePositions[], variable i_strLiquidClassName, variable i_fltVolumeAdapter, variable i_intMixCycles, variable i_fltVolumeMix, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable loopCounter1;
    private variable LabwareID_ALP;
    private variable Size_arrayALP;
    private variable WellID;
    private variable LabwareID_Adapters;
    private variable loopCounter2;
    private variable Index2_Pos_RAP_Row;
    private variable Index_Pos_RAP;
    private variable Index1_Pos_RAP_Column;
    private variable intCurrentTipType;
    private variable strTypeOfLabware;
    private variable Index1_Pos;
    private variable Index2_Pos;
    private variable Size_Index1Positions;
    private variable Size_Index2Positions;
    private variable loopCounter3;
    private variable intCurrentDispenseMode;
    private variable retValueDialog;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private dialog customDialog_4;
    private dialog customDialog_5;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_IndexAdaptersFromTubesORPlateIntoPlate <<<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("PIP_IndexAdaptersFromTubesORPlateIntoPlate"), i_blnUpdateInformationIntoReporFile);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassName, intCurrentTipType, intCurrentDispenseMode);
      _DATA_PlausibilityCheckVolume(i_fltVolumeAdapter, intCurrentTipType);
      LabwareID_Adapters = SeqGetLabwareId(i_seqIndexAdapters);
      _DATA_InterpreteLabwareID(LabwareID_Adapters, strTypeOfLabware);
      LabwareID_ALP = SeqGetLabwareId(i_seqAdapterLigationPlate);
      SeqRemoveAll(i_seqIndexAdapters);
      SeqRemoveAll(i_seqAdapterLigationPlate);
      Size_arrayALP=io_arrAdaptorLigationPlatePositions.GetSize();
      {
        for(loopCounter2 = 0; loopCounter2 < Size_arrayALP;)
        {
          loopCounter2 = loopCounter2 + 1;
          WellID=io_arrAdaptorLigationPlatePositions.GetAt(loopCounter2-1);
          SeqAdd(i_seqAdapterLigationPlate, LabwareID_ALP, WellID);
          if (strTypeOfLabware == "plate")
          {
            Index1_Pos_RAP_Column=io_arrIndex1Positions.GetAt(loopCounter2-1);
            Index2_Pos_RAP_Row=io_arrIndex2Positions.GetAt(loopCounter2-1);
            TrcTrace(Translate("Index2_Pos_RAP_Row:     "), Index2_Pos_RAP_Row);
            if (Index2_Pos_RAP_Row == "1")
            {
              Index2_Pos_RAP_Row = Translate("A");
            }
            if (Index2_Pos_RAP_Row == "2")
            {
              Index2_Pos_RAP_Row = Translate("B");
            }
            if (Index2_Pos_RAP_Row == "3")
            {
              Index2_Pos_RAP_Row = Translate("C");
            }
            if (Index2_Pos_RAP_Row == "4")
            {
              Index2_Pos_RAP_Row = Translate("D");
            }
            if (Index2_Pos_RAP_Row == "5")
            {
              Index2_Pos_RAP_Row = Translate("E");
            }
            if (Index2_Pos_RAP_Row == "6")
            {
              Index2_Pos_RAP_Row = Translate("F");
            }
            if (Index2_Pos_RAP_Row == "7")
            {
              Index2_Pos_RAP_Row = Translate("G");
            }
            if (Index2_Pos_RAP_Row == "8")
            {
              Index2_Pos_RAP_Row = Translate("H");
            }
            Index_Pos_RAP = Index2_Pos_RAP_Row + Index1_Pos_RAP_Column;
            SeqAdd(i_seqIndexAdapters, LabwareID_Adapters, Index_Pos_RAP);
            Trace ("Index mixture in RAP well ", Index_Pos_RAP, " will go to ALP well ", WellID);
          }
          if (strTypeOfLabware == "tube")
          {
            Index1_Pos=io_arrIndex1Positions.GetAt(loopCounter2-1);
            SeqAdd(i_seqIndexAdapters, LabwareID_Adapters, Index1_Pos);
            {
              for(loopCounter2 = 0; loopCounter2 < Size_arrayALP;)
              {
                loopCounter2 = loopCounter2 + 1;
                Index2_Pos=io_arrIndex2Positions.GetAt(loopCounter2-1);
                SeqAdd(i_seqIndexAdapters, LabwareID_Adapters, Index2_Pos);
              }
            }
          }
        }
      }
      i_seqIndexAdapters.SetCurrentPosition(1);
      i_seqAdapterLigationPlate.SetCurrentPosition(1);
      if (strTypeOfLabware == "plate")
      {
        HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
        if (intCurrentTipType == 23)
        {
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
        }
        {
          loopCounter1 = 0;
          while (
             (i_seqAdapterLigationPlate.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seqAdapterLigationPlate, 1, seq_Tips50, 1, i_seqIndexAdapters, 1);
            loopCounter1 = loopCounter1 + 1;
            if (intCurrentTipType == 23)
            {
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              DATA_TipCounterWrite(ML_STAR);
            }
            else
            {
              MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------\n\nWrong Tiptype detected - Transfer of liquid denied\n\nиииииииииииииииииииииииииииииииииииииииииииииииииииииии-иииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииии "));
              customDialog_5.InitCustomDialog("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");
              customDialog_5.ShowCustomDialog();
              retValueDialog = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
              abort;
            }
            if (
               (i_seqAdapterLigationPlate.GetCurrentPosition() > 0 && i_seqAdapterLigationPlate.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seqAdapterLigationPlate.SetMax(i_seqAdapterLigationPlate.GetTotal());
          seq_Tips50.SetMax(seq_Tips50.GetTotal());
          i_seqIndexAdapters.SetMax(i_seqIndexAdapters.GetTotal());
          i_seqAdapterLigationPlate.SetCurrentPosition(1);
          i_seqIndexAdapters.SetCurrentPosition(1);
        }
        if (intCurrentTipType == 23)
        {
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
        }
        STCC::ResetFilterSequences();
        STCC::AddFilterSequence(ML_STAR, i_seqAdapterLigationPlate);
        {
          variable _FilterIdsArray_6[];
          variable _ColumnIdsArray_6[];
          variable _ColumnNamesArray_6[];
          variable _ExperimentsArray_6[];
          _FilterIdsArray_6.SetSize(0);
          _ColumnNamesArray_6.SetSize(14);
          _ColumnIdsArray_6.SetSize(14);
          _ColumnNamesArray_6.SetAt(0, "RecordId");
          _ColumnIdsArray_6.SetAt(0, 0);
          _ColumnNamesArray_6.SetAt(1, "TRackBC");
          _ColumnIdsArray_6.SetAt(1, 1);
          _ColumnNamesArray_6.SetAt(2, "TLabwareId");
          _ColumnIdsArray_6.SetAt(2, 2);
          _ColumnNamesArray_6.SetAt(3, "TPositionId");
          _ColumnIdsArray_6.SetAt(3, 3);
          _ColumnNamesArray_6.SetAt(4, "TPositionBC");
          _ColumnIdsArray_6.SetAt(4, 4);
          _ColumnNamesArray_6.SetAt(5, "TStatusSummary");
          _ColumnIdsArray_6.SetAt(5, 5);
          _ColumnNamesArray_6.SetAt(6, "TSumStateDescription");
          _ColumnIdsArray_6.SetAt(6, 6);
          _ColumnNamesArray_6.SetAt(7, "TVolume");
          _ColumnIdsArray_6.SetAt(7, 7);
          _ColumnNamesArray_6.SetAt(8, "SRackBC");
          _ColumnIdsArray_6.SetAt(8, 8);
          _ColumnNamesArray_6.SetAt(9, "SLabwareId");
          _ColumnIdsArray_6.SetAt(9, 9);
          _ColumnNamesArray_6.SetAt(10, "SPositionId");
          _ColumnIdsArray_6.SetAt(10, 10);
          _ColumnNamesArray_6.SetAt(11, "SPositionBC");
          _ColumnIdsArray_6.SetAt(11, 11);
          _ColumnNamesArray_6.SetAt(12, "ActionDateTime");
          _ColumnIdsArray_6.SetAt(12, 12);
          _ColumnNamesArray_6.SetAt(13, "UserName");
          _ColumnIdsArray_6.SetAt(13, 13);
          _ExperimentsArray_6.SetSize(0);
          STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqIndexAdapters, 3, _FilterIdsArray_6, 0, _ColumnIdsArray_6, _ColumnNamesArray_6, _ExperimentsArray_6, "Adapter_to_ALP_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
        }
      }
      if (strTypeOfLabware == "tube")
      {
        if (intCurrentTipType == 23)
        {
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
          Size_Index1Positions=io_arrIndex1Positions.GetSize();
          if (Size_Index1Positions > 0)
          {
            MECC::TraceComment(Translate("********** Fill the ALP with the Index1 adapters **************"));
            {
              loopCounter3 = 0;
              while (
                 (i_seqAdapterLigationPlate.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, i_seqAdapterLigationPlate, 1, seq_Tips50, 1, i_seqIndexAdapters, 1);
                loopCounter3 = loopCounter3 + 1;
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	strStepReturnValueAspiration = arrRetValues[2];
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
                _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                DATA_TipCounterWrite(ML_STAR);
                if (
                   (i_seqAdapterLigationPlate.GetCurrentPosition() > 0 && i_seqAdapterLigationPlate.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              i_seqAdapterLigationPlate.SetMax(i_seqAdapterLigationPlate.GetTotal());
              seq_Tips50.SetMax(seq_Tips50.GetTotal());
              i_seqIndexAdapters.SetMax(i_seqIndexAdapters.GetTotal());
              i_seqAdapterLigationPlate.SetCurrentPosition(1);
              i_seqIndexAdapters.SetCurrentPosition(1);
            }
            STCC::ResetFilterSequences();
            STCC::AddFilterSequence(ML_STAR, i_seqIndexAdapters);
            {
              variable _FilterIdsArray_7[];
              variable _ColumnIdsArray_7[];
              variable _ColumnNamesArray_7[];
              variable _ExperimentsArray_7[];
              _FilterIdsArray_7.SetSize(0);
              _ColumnNamesArray_7.SetSize(14);
              _ColumnIdsArray_7.SetSize(14);
              _ColumnNamesArray_7.SetAt(0, "RecordId");
              _ColumnIdsArray_7.SetAt(0, 0);
              _ColumnNamesArray_7.SetAt(1, "TRackBC");
              _ColumnIdsArray_7.SetAt(1, 1);
              _ColumnNamesArray_7.SetAt(2, "TLabwareId");
              _ColumnIdsArray_7.SetAt(2, 2);
              _ColumnNamesArray_7.SetAt(3, "TPositionId");
              _ColumnIdsArray_7.SetAt(3, 3);
              _ColumnNamesArray_7.SetAt(4, "TPositionBC");
              _ColumnIdsArray_7.SetAt(4, 4);
              _ColumnNamesArray_7.SetAt(5, "TStatusSummary");
              _ColumnIdsArray_7.SetAt(5, 5);
              _ColumnNamesArray_7.SetAt(6, "TSumStateDescription");
              _ColumnIdsArray_7.SetAt(6, 6);
              _ColumnNamesArray_7.SetAt(7, "TVolume");
              _ColumnIdsArray_7.SetAt(7, 7);
              _ColumnNamesArray_7.SetAt(8, "SRackBC");
              _ColumnIdsArray_7.SetAt(8, 8);
              _ColumnNamesArray_7.SetAt(9, "SLabwareId");
              _ColumnIdsArray_7.SetAt(9, 9);
              _ColumnNamesArray_7.SetAt(10, "SPositionId");
              _ColumnIdsArray_7.SetAt(10, 10);
              _ColumnNamesArray_7.SetAt(11, "SPositionBC");
              _ColumnIdsArray_7.SetAt(11, 11);
              _ColumnNamesArray_7.SetAt(12, "ActionDateTime");
              _ColumnIdsArray_7.SetAt(12, 12);
              _ColumnNamesArray_7.SetAt(13, "UserName");
              _ColumnIdsArray_7.SetAt(13, 13);
              _ExperimentsArray_7.SetSize(0);
              STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqAdapterLigationPlate, 3, _FilterIdsArray_7, 0, _ColumnIdsArray_7, _ColumnNamesArray_7, _ExperimentsArray_7, "Adapters1_to_ALP_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
            }
          }
          Size_Index2Positions=io_arrIndex2Positions.GetSize();
          if (Size_Index2Positions > 0)
          {
            MECC::TraceComment(Translate("**************** Fill the ALP with the Index2 adapters, if any **********************"));
            {
              loopCounter3 = 0;
              while (
                 (i_seqAdapterLigationPlate.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, i_seqAdapterLigationPlate, 1, seq_Tips50, 1, i_seqIndexAdapters, 1);
                loopCounter3 = loopCounter3 + 1;
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	strStepReturnValueAspiration = arrRetValues[2];
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
                _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                DATA_TipCounterWrite(ML_STAR);
                if (
                   (i_seqAdapterLigationPlate.GetCurrentPosition() > 0 && i_seqAdapterLigationPlate.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              i_seqAdapterLigationPlate.SetMax(i_seqAdapterLigationPlate.GetTotal());
              seq_Tips50.SetMax(seq_Tips50.GetTotal());
              i_seqIndexAdapters.SetMax(i_seqIndexAdapters.GetTotal());
              i_seqAdapterLigationPlate.SetCurrentPosition(1);
              i_seqIndexAdapters.SetCurrentPosition(1);
            }
            STCC::ResetFilterSequences();
            STCC::AddFilterSequence(ML_STAR, i_seqIndexAdapters);
            {
              variable _FilterIdsArray_8[];
              variable _ColumnIdsArray_8[];
              variable _ColumnNamesArray_8[];
              variable _ExperimentsArray_8[];
              _FilterIdsArray_8.SetSize(0);
              _ColumnNamesArray_8.SetSize(14);
              _ColumnIdsArray_8.SetSize(14);
              _ColumnNamesArray_8.SetAt(0, "RecordId");
              _ColumnIdsArray_8.SetAt(0, 0);
              _ColumnNamesArray_8.SetAt(1, "TRackBC");
              _ColumnIdsArray_8.SetAt(1, 1);
              _ColumnNamesArray_8.SetAt(2, "TLabwareId");
              _ColumnIdsArray_8.SetAt(2, 2);
              _ColumnNamesArray_8.SetAt(3, "TPositionId");
              _ColumnIdsArray_8.SetAt(3, 3);
              _ColumnNamesArray_8.SetAt(4, "TPositionBC");
              _ColumnIdsArray_8.SetAt(4, 4);
              _ColumnNamesArray_8.SetAt(5, "TStatusSummary");
              _ColumnIdsArray_8.SetAt(5, 5);
              _ColumnNamesArray_8.SetAt(6, "TSumStateDescription");
              _ColumnIdsArray_8.SetAt(6, 6);
              _ColumnNamesArray_8.SetAt(7, "TVolume");
              _ColumnIdsArray_8.SetAt(7, 7);
              _ColumnNamesArray_8.SetAt(8, "SRackBC");
              _ColumnIdsArray_8.SetAt(8, 8);
              _ColumnNamesArray_8.SetAt(9, "SLabwareId");
              _ColumnIdsArray_8.SetAt(9, 9);
              _ColumnNamesArray_8.SetAt(10, "SPositionId");
              _ColumnIdsArray_8.SetAt(10, 10);
              _ColumnNamesArray_8.SetAt(11, "SPositionBC");
              _ColumnIdsArray_8.SetAt(11, 11);
              _ColumnNamesArray_8.SetAt(12, "ActionDateTime");
              _ColumnIdsArray_8.SetAt(12, 12);
              _ColumnNamesArray_8.SetAt(13, "UserName");
              _ColumnIdsArray_8.SetAt(13, 13);
              _ExperimentsArray_8.SetSize(0);
              STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqAdapterLigationPlate, 3, _FilterIdsArray_8, 0, _ColumnIdsArray_8, _ColumnNamesArray_8, _ExperimentsArray_8, "Adapters2_to_ALP_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
            }
          }
          if (intCurrentTipType == 23)
          {
            if(0){
              ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
            }
          }
        }
        else
        {
          MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------\n\nWrong Tiptype detected - Transfer of liquid denied\n\nиииииииииииииииииииииииииииииииииииииииииииииииииииииии-иииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииии "));
          customDialog_4.InitCustomDialog("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");
          customDialog_4.ShowCustomDialog();
          retValueDialog = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
          abort;
        }
      }
      HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_IndexAdaptersFromTubesORPlateIntoPlate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function Trp_MIDI( device & ML_STAR, sequence & i_seqMIDISourcePosition, sequence & i_seqMIDIDestinationPosition, variable i_intTrackToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable strCurrentBarcodeRead;
    private variable strInformatioToBeUpdated;
    private variable strSequenceNameStartingPosition;
    private variable strSequenceNameDestinationPosition;
    o_strReadCurrentBarcode = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Trp_MIDI <<<<<<<<<<"));
    strSequenceNameStartingPosition = SeqGetName(i_seqMIDISourcePosition);
    strSequenceNameDestinationPosition = SeqGetName(i_seqMIDIDestinationPosition);
    i_seqMIDIDestinationPosition.SetCurrentPosition(1);
    i_seqMIDISourcePosition.SetCurrentPosition(1);
    strInformatioToBeUpdated = StrConcat8(Translate("Trp_MIDI"), Translate(" : "), strSequenceNameStartingPosition, Translate(" -----> "), strSequenceNameDestinationPosition, Translate(""), Translate(""), Translate(""));
    DATA_UpdateInformationIntoReportFile(strInformatioToBeUpdated, i_blnUpdateInformationIntoReporFile);
    if (_intTransportTool == 1)
    {
      ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
      if (i_intTrackToReadBarcode > 0)
      {
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._3ADE1686_D394_4a08_918C_20E3EDA3CC69("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"); // ReadPlateBarcode
          	strCurrentBarcodeRead = arrRetValues[3];
        }
        Trace ("Current barcode read by autoload = ", strCurrentBarcodeRead);
        o_strReadCurrentBarcode = strCurrentBarcodeRead;
      }
      else
      {
        o_strReadCurrentBarcode = Translate("No barcode reading activated");
      }
      ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
      if (i_blnParkTransportToolAfterMove == 1)
      {
        ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
    }
    if (_intTransportTool == 2)
    {
      _Trp_MIDIwithCOREGripper(ML_STAR, i_seqMIDISourcePosition, i_seqMIDIDestinationPosition, i_intTrackToReadBarcode, i_blnParkTransportToolAfterMove, o_strReadCurrentBarcode);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Trp_MIDI <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function Trp_HSP( device & ML_STAR, sequence & i_seqHSPStartingPosition, sequence & i_seqHSP_Destination, variable i_intTrackNumberToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable strCurrentBarcodeRead;
    private variable strInformatioToBeUpdated;
    private variable strSequenceNameStartingPosition;
    private variable strSequenceNameDestinationPosition;
    o_strReadCurrentBarcode = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Trp_HSP <<<<<<<<<"));
    strSequenceNameStartingPosition = SeqGetName(i_seqHSPStartingPosition);
    strSequenceNameDestinationPosition = SeqGetName(i_seqHSP_Destination);
    strInformatioToBeUpdated = StrConcat8(Translate("Trp_HSP"), Translate(" : "), strSequenceNameStartingPosition, Translate(" -----> "), strSequenceNameDestinationPosition, Translate(""), Translate(""), Translate(""));
    DATA_UpdateInformationIntoReportFile(strInformatioToBeUpdated, i_blnUpdateInformationIntoReporFile);
    if (_intTransportTool == 1)
    {
      ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
      if (i_intTrackNumberToReadBarcode > 0)
      {
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._3ADE1686_D394_4a08_918C_20E3EDA3CC69("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"); // ReadPlateBarcode
          	strCurrentBarcodeRead = arrRetValues[3];
        }
        Trace ("Current barcode read by autoload = ", strCurrentBarcodeRead);
        o_strReadCurrentBarcode = strCurrentBarcodeRead;
      }
      else
      {
        o_strReadCurrentBarcode = Translate("No barcode reading activated");
      }
      ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
      if (i_blnParkTransportToolAfterMove == 1)
      {
        ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
    }
    if (_intTransportTool == 2)
    {
      _Trp_HSPwithCOREGripper(ML_STAR, i_seqHSPStartingPosition, i_seqHSP_Destination, i_intTrackNumberToReadBarcode, i_blnParkTransportToolAfterMove, o_strReadCurrentBarcode);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Trp_HSP <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_Pool_LVFT_SingleDispenseFromPlateToPlate( device & ML_STAR, sequence & i_seq_NormPlate, sequence & i_seq_PoolingPlate, variable i_strLiquidClassNameTransfer, variable & i_str_NormalizationFile, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable loopCounter1;
    private variable WellsInPoolingPlate;
    private file file1;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable arr_Pools[];
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable retValueDialog;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private variable strWellID_Pool;
    private variable strCheckWellID;
    private variable intFoundEntryWithinArray;
    private variable intNumberOfSamplesPoolingPlate;
    private variable intRecordsInArray;
    private variable intSamplesPerPool;
    private variable intVolumePerSample;
    private dialog customDialog_9;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_Pool_LVFT_SingleDispenseFromPlateToPlate <<<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("PIP_Pool_LVFT_SingleDispenseFromPlateToPlate"), i_blnUpdateInformationIntoReporFile);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
      intNumberOfSamplesPoolingPlate = SeqGetTotal(i_seq_PoolingPlate);
      arr_Pools.SetSize(0);
      file1.AddField("PoolWell", strWellID_Pool, hslString, 255);
      if( 0 == file1.Open(i_str_NormalizationFile + " " + "Sheet1$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_NormalizationFile, "HxMetEdCompCmd");
      }
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      arr_Pools.AddAsLast(strWellID_Pool);
      {
        loopCounter2 = 0;
        while (
           (file1.Eof() == 0)
        )
        {
          loopCounter2 = loopCounter2 + 1;
          if( 0 == file1.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          intRecordsInArray=arr_Pools.GetSize();
          {
            for(loopCounter3 = 0; loopCounter3 < intRecordsInArray;)
            {
              loopCounter3 = loopCounter3 + 1;
              strCheckWellID=arr_Pools.GetAt(loopCounter3-1);
              if (strCheckWellID == strWellID_Pool)
              {
                intFoundEntryWithinArray = 1;
                break;
              }
            }
          }
          if (intFoundEntryWithinArray == 0)
          {
            arr_Pools.AddAsLast(strWellID_Pool);
          }
          intFoundEntryWithinArray = 0;
        }
      }
      if( 0 != file1.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file1.RemoveFields();
      WellsInPoolingPlate=arr_Pools.GetSize();
      intSamplesPerPool = intNumberOfSamplesPoolingPlate / (WellsInPoolingPlate * 1.0);
      if (intSamplesPerPool <= 24)
      {
        intVolumePerSample = 10;
      }
      else
      {
        intVolumePerSample = 5;
      }
      Trace ("Number of Samples = ", intNumberOfSamplesPoolingPlate);
      Trace ("Number of Pools = ", WellsInPoolingPlate);
      Trace ("Samples per pool = ", intSamplesPerPool);
      Trace ("Volume to transfer per sample = ", intVolumePerSample);
      if (intCurrentTipType == 23)
      {
        if(0){
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        }
        {
          loopCounter1 = 0;
          while (
             (i_seq_NormPlate.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seq_NormPlate, 1, seq_Tips50, 1, i_seq_PoolingPlate, 1);
            loopCounter1 = loopCounter1 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            DATA_TipCounterWrite(ML_STAR);
            if (
               (i_seq_NormPlate.GetCurrentPosition() > 0 && i_seq_NormPlate.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seq_NormPlate.SetMax(i_seq_NormPlate.GetTotal());
          seq_Tips50.SetMax(seq_Tips50.GetTotal());
          i_seq_PoolingPlate.SetMax(i_seq_PoolingPlate.GetTotal());
          i_seq_NormPlate.SetCurrentPosition(1);
          i_seq_PoolingPlate.SetCurrentPosition(1);
        }
        if(0){
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
        customDialog_9.InitCustomDialog("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");
        customDialog_9.ShowCustomDialog();
        retValueDialog = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, i_seq_NormPlate);
      {
        variable _FilterIdsArray_10[];
        variable _ColumnIdsArray_10[];
        variable _ColumnNamesArray_10[];
        variable _ExperimentsArray_10[];
        _FilterIdsArray_10.SetSize(0);
        _ColumnNamesArray_10.SetSize(14);
        _ColumnIdsArray_10.SetSize(14);
        _ColumnNamesArray_10.SetAt(0, "RecordId");
        _ColumnIdsArray_10.SetAt(0, 0);
        _ColumnNamesArray_10.SetAt(1, "TRackBC");
        _ColumnIdsArray_10.SetAt(1, 1);
        _ColumnNamesArray_10.SetAt(2, "TLabwareId");
        _ColumnIdsArray_10.SetAt(2, 2);
        _ColumnNamesArray_10.SetAt(3, "TPositionId");
        _ColumnIdsArray_10.SetAt(3, 3);
        _ColumnNamesArray_10.SetAt(4, "TPositionBC");
        _ColumnIdsArray_10.SetAt(4, 4);
        _ColumnNamesArray_10.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_10.SetAt(5, 5);
        _ColumnNamesArray_10.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_10.SetAt(6, 6);
        _ColumnNamesArray_10.SetAt(7, "TVolume");
        _ColumnIdsArray_10.SetAt(7, 7);
        _ColumnNamesArray_10.SetAt(8, "SRackBC");
        _ColumnIdsArray_10.SetAt(8, 8);
        _ColumnNamesArray_10.SetAt(9, "SLabwareId");
        _ColumnIdsArray_10.SetAt(9, 9);
        _ColumnNamesArray_10.SetAt(10, "SPositionId");
        _ColumnIdsArray_10.SetAt(10, 10);
        _ColumnNamesArray_10.SetAt(11, "SPositionBC");
        _ColumnIdsArray_10.SetAt(11, 11);
        _ColumnNamesArray_10.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_10.SetAt(12, 12);
        _ColumnNamesArray_10.SetAt(13, "UserName");
        _ColumnIdsArray_10.SetAt(13, 13);
        _ExperimentsArray_10.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seq_PoolingPlate, 3, _FilterIdsArray_10, 0, _ColumnIdsArray_10, _ColumnNamesArray_10, _ExperimentsArray_10, "Pool_Into_A1_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_Pool_LVFT_SingleDispenseFromPlateToPlate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_OIL_LVFTSingleDispenseFromTroughToPlate( device & ML_STAR, sequence & i_seqDestinationHardShellPlate, sequence & i_seqOil, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable loopCounter1;
    private variable strCurrentDispenseMode;
    private variable strTypeOfLabware;
    private variable fltVolume;
    private variable i_strLiquidClassNameTransfer;
    private variable strLabwareIDAspiration;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable retValueDialog;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private dialog customDialog_11;
    private dialog customDialog_12;
    private dialog customDialog_13;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_OIL_LVFTSingleDispenseFromTroughToPlate <<<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("PIP_OIL_LVFTSingleDispenseFromTroughToPlate"), i_blnUpdateInformationIntoReporFile);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
      fltVolume = 10;
      _DATA_PlausibilityCheckVolume(fltVolume, intCurrentTipType);
      strLabwareIDAspiration = SeqGetLabwareId(i_seqOil);
      _DATA_InterpreteLabwareID(strLabwareIDAspiration, strTypeOfLabware);
      if (intCurrentDispenseMode == 2)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (intCurrentDispenseMode == 4)
        {
          strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (strCurrentDispenseMode == "Part")
      {
        if (intCurrentTipType == 23)
        {
          if (strTypeOfLabware == "trough")
          {
            if(0){
              ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
            }
            {
              loopCounter1 = 0;
              while (
                 (i_seqDestinationHardShellPlate.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, i_seqDestinationHardShellPlate, 1, seq_Tips50, 1, i_seqOil, 1);
                loopCounter1 = loopCounter1 + 1;
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	strStepReturnValueAspiration = arrRetValues[2];
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
                _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                DATA_TipCounterWrite(ML_STAR);
                if (
                   (i_seqDestinationHardShellPlate.GetCurrentPosition() > 0 && i_seqDestinationHardShellPlate.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              i_seqDestinationHardShellPlate.SetMax(i_seqDestinationHardShellPlate.GetTotal());
              seq_Tips50.SetMax(seq_Tips50.GetTotal());
              i_seqOil.SetMax(i_seqOil.GetTotal());
              i_seqDestinationHardShellPlate.SetCurrentPosition(1);
              i_seqOil.SetCurrentPosition(1);
            }
            if(0){
              ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
            }
          }
          else
          {
            MECC::TraceComment(Translate("WRONG LABWARE DETECTED"));
            customDialog_11.InitCustomDialog("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");
            customDialog_11.ShowCustomDialog();
            retValueDialog = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
            abort;
          }
        }
        else
        {
          MECC::TraceComment(Translate("\"WRONG TIPTYPE DETECED\""));
          customDialog_13.InitCustomDialog("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");
          customDialog_13.ShowCustomDialog();
          retValueDialog = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
          abort;
        }
      }
      else
      {
        MECC::TraceComment(Translate("Wrong Dispense mode detected"));
        customDialog_12.InitCustomDialog("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");
        customDialog_12.ShowCustomDialog();
        retValueDialog = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, i_seqOil);
      {
        variable _FilterIdsArray_14[];
        variable _ColumnIdsArray_14[];
        variable _ColumnNamesArray_14[];
        variable _ExperimentsArray_14[];
        _FilterIdsArray_14.SetSize(0);
        _ColumnNamesArray_14.SetSize(14);
        _ColumnIdsArray_14.SetSize(14);
        _ColumnNamesArray_14.SetAt(0, "RecordId");
        _ColumnIdsArray_14.SetAt(0, 0);
        _ColumnNamesArray_14.SetAt(1, "TRackBC");
        _ColumnIdsArray_14.SetAt(1, 1);
        _ColumnNamesArray_14.SetAt(2, "TLabwareId");
        _ColumnIdsArray_14.SetAt(2, 2);
        _ColumnNamesArray_14.SetAt(3, "TPositionId");
        _ColumnIdsArray_14.SetAt(3, 3);
        _ColumnNamesArray_14.SetAt(4, "TPositionBC");
        _ColumnIdsArray_14.SetAt(4, 4);
        _ColumnNamesArray_14.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_14.SetAt(5, 5);
        _ColumnNamesArray_14.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_14.SetAt(6, 6);
        _ColumnNamesArray_14.SetAt(7, "TVolume");
        _ColumnIdsArray_14.SetAt(7, 7);
        _ColumnNamesArray_14.SetAt(8, "SRackBC");
        _ColumnIdsArray_14.SetAt(8, 8);
        _ColumnNamesArray_14.SetAt(9, "SLabwareId");
        _ColumnIdsArray_14.SetAt(9, 9);
        _ColumnNamesArray_14.SetAt(10, "SPositionId");
        _ColumnIdsArray_14.SetAt(10, 10);
        _ColumnNamesArray_14.SetAt(11, "SPositionBC");
        _ColumnIdsArray_14.SetAt(11, 11);
        _ColumnNamesArray_14.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_14.SetAt(12, 12);
        _ColumnNamesArray_14.SetAt(13, "UserName");
        _ColumnIdsArray_14.SetAt(13, 13);
        _ExperimentsArray_14.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqDestinationHardShellPlate, 3, _FilterIdsArray_14, 0, _ColumnIdsArray_14, _ColumnNamesArray_14, _ExperimentsArray_14, "PlateLiquidToPlate.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_OIL_LVFTSingleDispenseFromTroughToPlate<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_EtOH_HVFTMultidispenseFromTroughToPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_strLiquidClassNameTransfer, variable & io_fltTrackingEthanolVolume, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable loopCounter3;
    private variable loopCounter4;
    private timer Incubate30sec;
    private variable strCurrentDispenseMode;
    private variable strTypeOfLabware;
    private variable intNumberOfSamples;
    private variable strLabwareIDAspiration;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable fltVolume;
    private variable retValueDialog;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private variable fltActualIncubationDuration;
    private variable fltAspirationVolume_Ethanol;
    private variable fltAspirationVolumeEthanolCycle1;
    private variable fltAspirationVolumeEthanolCycle2;
    private variable fltAspirationVolumeEthanolCycle3;
    private variable intMixCycles;
    private variable intNumberOfAspirations;
    private variable intNumberOfColumns;
    private variable intNumberOfDispenses;
    private variable intNumberOfDispensesCycle1;
    private variable intNumberOfDispensesCycle2;
    private variable intNumberOfDispensesCycle3;
    private variable intCurrentPositionSequenceEthanol;
    private variable fltVolumeAspirate8channels_mL_inclusiveDeadVolume;
    private variable fltVolumeAspirateChannel1;
    private variable fltVolumeToAspirate;
    private variable fltVolumeToAspirate_8channels_mL;
    private variable fltVolumeToAspirate_8channels_uL;
    private variable fltMeasuredVolume_Channel1;
    private variable intPositionsRetrievingEthanol;
    private dialog customDialog_15;
    private dialog customDialog_16;
    private dialog customDialog_17;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: PIP_EtOH_HVFTMultidispenseFromTroughToPlate <<<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("PIP_EtOH_HVFTMultidispenseFromTroughToPlate"), i_blnUpdateInformationIntoReporFile);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
      fltVolume = 200;
      _DATA_PlausibilityCheckVolume(fltVolume, intCurrentTipType);
      strLabwareIDAspiration = SeqGetLabwareId(i_seqAspirationPosition);
      _DATA_InterpreteLabwareID(strLabwareIDAspiration, strTypeOfLabware);
      intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (intCurrentDispenseMode == 2)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (intCurrentDispenseMode == 4)
        {
          strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          strCurrentDispenseMode = Translate("Empty");
        }
      }
      i_seqDispensePosition.SetCurrentPosition(1);
      _intNumberOfCompleteColumns = intNumberOfSamples / 8;
      _intRemainingWells = intNumberOfSamples % 8;
      Trace ("Number of Complete Columns in Destination Plate:  ", _intNumberOfCompleteColumns);
      Trace ("Number of Wells in Last, Incomplete Column:  ", _intRemainingWells);
      if (_intRemainingWells > 0)
      {
        intNumberOfColumns = _intNumberOfCompleteColumns + 1;
      }
      else
      {
        intNumberOfColumns = _intNumberOfCompleteColumns;
      }
      fltAspirationVolume_Ethanol = fltVolume * intNumberOfColumns;
      Trace ("Required Total Volume for Ethanol, Per Row, Max = ", fltAspirationVolume_Ethanol);
      if (fltAspirationVolume_Ethanol <= 1000)
      {
        intNumberOfAspirations = 1;
        intNumberOfDispensesCycle1 = intNumberOfColumns;
        fltAspirationVolumeEthanolCycle1 = fltAspirationVolume_Ethanol;
      }
      else
      {
        intNumberOfAspirations = fltAspirationVolume_Ethanol / (1000 * 1.0);
        intNumberOfAspirations = MthCeiling(intNumberOfAspirations);
        intNumberOfDispensesCycle1 = 5;
        intNumberOfDispensesCycle2 = intNumberOfColumns - intNumberOfDispensesCycle1;
        if (intNumberOfDispensesCycle2 > 5)
        {
          intNumberOfDispensesCycle3 = intNumberOfDispensesCycle2 - 5;
          intNumberOfDispensesCycle2 = 5;
        }
        fltAspirationVolumeEthanolCycle1 = fltVolume * intNumberOfDispensesCycle1;
        fltAspirationVolumeEthanolCycle2 = fltVolume * intNumberOfDispensesCycle2;
        fltAspirationVolumeEthanolCycle3 = fltVolume * intNumberOfDispensesCycle3;
      }
      Trace ("Number of Aspirations:  ", intNumberOfAspirations);
      Trace ("Number of Columns for the first set of dispenses:  ", intNumberOfDispensesCycle1);
      Trace ("Number of Columns for the second set of dispenses:  ", intNumberOfDispensesCycle2);
      Trace ("Number of Columns for the third set of dispenses:  ", intNumberOfDispensesCycle3);
      Trace ("Aspiration volume for the first set of dispenses:  ", fltAspirationVolumeEthanolCycle1);
      Trace ("Aspiration volume for the second set of dispenses:  ", fltAspirationVolumeEthanolCycle2);
      Trace ("Aspiration volume for the third set of dispenses:  ", fltAspirationVolumeEthanolCycle3);
      if (strCurrentDispenseMode == "Part")
      {
        if (intCurrentTipType == 5)
        {
          if (strTypeOfLabware == "trough")
          {
            HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
            {
              loopCounter4 = 0;
              while (
                 (i_seqDispensePosition.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, i_seqAspirationPosition, 1, i_seqDispensePosition, 1, seq_Tips1000, 1);
                loopCounter4 = loopCounter4 + 1;
                TrcTrace(Translate("_________________________________________________"), loopCounter4);
                if (loopCounter4 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                  fltVolumeToAspirate = fltAspirationVolumeEthanolCycle1;
                  intNumberOfDispenses = intNumberOfDispensesCycle1;
                  intMixCycles = 1;
                  io_fltTrackingEthanolVolume = 0;
                }
                if (loopCounter4 == 2)
                {
                  fltVolumeToAspirate = fltAspirationVolumeEthanolCycle2;
                  intNumberOfDispenses = intNumberOfDispensesCycle2;
                  intMixCycles = 0;
                }
                if (loopCounter4 == 3)
                {
                  fltVolumeToAspirate = fltAspirationVolumeEthanolCycle3;
                  intNumberOfDispenses = intNumberOfDispensesCycle3;
                  intMixCycles = 0;
                }
                if (loopCounter4 == 1)
                {
                  MECC::TraceComment(Translate("Need to determine if there is enough liquid in the tub for the next aspiration step. "));
                  Trace (">>> Expected ethanol volume in tub:  ", io_fltTrackingEthanolVolume);
                  if (io_fltTrackingEthanolVolume <= 0)
                  {
                    MECC::TraceComment(Translate("At the start of a run, or if going to a new or refilled tub, the volume is unknown, so we have to measure it:"));
                    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    fltMeasuredVolume_Channel1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, i_seqAspirationPosition, 0, Translate("10000000"), 0, 0, 0);
                    fltVolumeAspirateChannel1 = HSLML_STAR::GetContainerVolume(1);
                    io_fltTrackingEthanolVolume = fltVolumeAspirateChannel1;
                    if (_blnSimulationModeON == 1)
                    {
                      io_fltTrackingEthanolVolume = 12000;
                    }
                    Trace (">>> After the cLLD check, the ethanol volume in tub is:  ", io_fltTrackingEthanolVolume);
                  }
                  fltVolumeToAspirate_8channels_uL = fltVolumeToAspirate * 8;
                  fltVolumeToAspirate_8channels_mL = fltVolumeToAspirate_8channels_uL / (1000 * 1.0);
                  fltVolumeAspirate8channels_mL_inclusiveDeadVolume = fltVolumeToAspirate_8channels_mL + 2;
                  Trace (">>> Next step needs this volume in tube (mL), including dead volume:  ", fltVolumeAspirate8channels_mL_inclusiveDeadVolume);
                  if (fltVolumeAspirate8channels_mL_inclusiveDeadVolume > io_fltTrackingEthanolVolume)
                  {
                    MECC::TraceComment(Translate("***** Insufficient volume of ethanol in tub.  Go to next tub, if available. *****"));
                    io_fltTrackingEthanolVolume = 0;
                    intPositionsRetrievingEthanol = SeqGetTotal(i_seqAspirationPosition);
                    if (intPositionsRetrievingEthanol >= 16)
                    {
                      intCurrentPositionSequenceEthanol = i_seqAspirationPosition.GetCurrentPosition();
                      if (intCurrentPositionSequenceEthanol <= 9)
                      {
                        SeqIncrement(i_seqAspirationPosition, 8);
                        MECC::TraceComment(Translate("***** Sequence incremented.  Going to next tub. Need to measure volume in tub. *****"));
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        fltMeasuredVolume_Channel1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, i_seqAspirationPosition, 0, Translate("10000000"), 0, 0, 0);
                        fltVolumeAspirateChannel1 = HSLML_STAR::GetContainerVolume(1);
                        io_fltTrackingEthanolVolume = fltVolumeAspirateChannel1;
                        if (_blnSimulationModeON == 1)
                        {
                        io_fltTrackingEthanolVolume = 120000;
                        }
                        Trace ("After the cLLD check, the ethanol volume in tub is:  ", io_fltTrackingEthanolVolume);
                        if (fltVolumeAspirate8channels_mL_inclusiveDeadVolume > io_fltTrackingEthanolVolume)
                        {
                        MECC::TraceComment(Translate("***** INADEQUATE VOLUME IN NEW TUB.  ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION.  *****"));
                        }
                      }
                      else
                      {
                        MECC::TraceComment(Translate("***** Sequence not incremented.  No other tubs available.  *****\n***** ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION. *****"));
                      }
                    }
                    else
                    {
                      MECC::TraceComment(Translate("***** Sequence not incremented.  No other tubs available.  *****\n***** ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION. *****"));
                    }
                  }
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	strStepReturnValueAspiration = arrRetValues[2];
                }
                if(0){
                  TrcTraceSequence(i_seqAspirationPosition);
                }
                io_fltTrackingEthanolVolume = io_fltTrackingEthanolVolume - fltVolumeToAspirate_8channels_mL;
                Trace ("New, calculated ethanol volume in tub:  ", io_fltTrackingEthanolVolume);
                {
                  for(loopCounter3 = 0; loopCounter3 < intNumberOfDispenses;)
                  {
                    loopCounter3 = loopCounter3 + 1;
                    {
                      	variable arrRetValues[];
                      	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      	strStepReturnValueDispense = arrRetValues[2];
                    }
                    _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
                  }
                }
                if(0){
                  TrcTraceSequence(i_seqDispensePosition);
                }
                if (loopCounter4 == 1)
                {
                  if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
                  {
                    if( 0 == Incubate30sec.SetTimer(23) )
                    {
                          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                  }
                }
                if (
                   (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
              i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
              seq_Tips1000.SetMax(seq_Tips1000.GetTotal());
              i_seqAspirationPosition.SetCurrentPosition(1);
              i_seqDispensePosition.SetCurrentPosition(1);
            }
            DATA_TipCounterWrite(ML_STAR);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            STCC::ResetFilterSequences();
            STCC::AddFilterSequence(ML_STAR, i_seqAspirationPosition);
            {
              variable _FilterIdsArray_18[];
              variable _ColumnIdsArray_18[];
              variable _ColumnNamesArray_18[];
              variable _ExperimentsArray_18[];
              _FilterIdsArray_18.SetSize(0);
              _ColumnNamesArray_18.SetSize(14);
              _ColumnIdsArray_18.SetSize(14);
              _ColumnNamesArray_18.SetAt(0, "RecordId");
              _ColumnIdsArray_18.SetAt(0, 0);
              _ColumnNamesArray_18.SetAt(1, "TRackBC");
              _ColumnIdsArray_18.SetAt(1, 1);
              _ColumnNamesArray_18.SetAt(2, "TLabwareId");
              _ColumnIdsArray_18.SetAt(2, 2);
              _ColumnNamesArray_18.SetAt(3, "TPositionId");
              _ColumnIdsArray_18.SetAt(3, 3);
              _ColumnNamesArray_18.SetAt(4, "TPositionBC");
              _ColumnIdsArray_18.SetAt(4, 4);
              _ColumnNamesArray_18.SetAt(5, "TStatusSummary");
              _ColumnIdsArray_18.SetAt(5, 5);
              _ColumnNamesArray_18.SetAt(6, "TSumStateDescription");
              _ColumnIdsArray_18.SetAt(6, 6);
              _ColumnNamesArray_18.SetAt(7, "TVolume");
              _ColumnIdsArray_18.SetAt(7, 7);
              _ColumnNamesArray_18.SetAt(8, "SRackBC");
              _ColumnIdsArray_18.SetAt(8, 8);
              _ColumnNamesArray_18.SetAt(9, "SLabwareId");
              _ColumnIdsArray_18.SetAt(9, 9);
              _ColumnNamesArray_18.SetAt(10, "SPositionId");
              _ColumnIdsArray_18.SetAt(10, 10);
              _ColumnNamesArray_18.SetAt(11, "SPositionBC");
              _ColumnIdsArray_18.SetAt(11, 11);
              _ColumnNamesArray_18.SetAt(12, "ActionDateTime");
              _ColumnIdsArray_18.SetAt(12, 12);
              _ColumnNamesArray_18.SetAt(13, "UserName");
              _ColumnIdsArray_18.SetAt(13, 13);
              _ExperimentsArray_18.SetSize(0);
              STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqDispensePosition, 3, _FilterIdsArray_18, 0, _ColumnIdsArray_18, _ColumnNamesArray_18, _ExperimentsArray_18, "Ethanol_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
            }
            i_seqDispensePosition.SetCurrentPosition(1);
            HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
            if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
            {
              if( 0 == Incubate30sec.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              fltActualIncubationDuration = Incubate30sec.GetElapsedTime();
            }
            Trace ("***** Actual incubation time (expected minimum 30 seconds for first column of wells):  ", fltActualIncubationDuration);
          }
          else
          {
            MECC::TraceComment(Translate("WRONG LABWARE DETECTED"));
            customDialog_16.InitCustomDialog("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");
            customDialog_16.ShowCustomDialog();
            retValueDialog = customDialog_16.GetCustomDialogProperty( "ReturnValue" );
            abort;
          }
        }
        else
        {
          MECC::TraceComment(Translate("\"WRONG TIPTYPE DETECED\""));
          customDialog_15.InitCustomDialog("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");
          customDialog_15.ShowCustomDialog();
          retValueDialog = customDialog_15.GetCustomDialogProperty( "ReturnValue" );
          abort;
        }
      }
      else
      {
        MECC::TraceComment(Translate("Wrong Dispense mode detected"));
        customDialog_17.InitCustomDialog("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");
        customDialog_17.ShowCustomDialog();
        retValueDialog = customDialog_17.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
      SeqResetSequenceIndexes(i_seqDispensePosition);
      i_seqDispensePosition.SetCurrentPosition(1);
      i_seqDispensePosition.SetCount(intNumberOfSamples);
      if(0){
        TrcTraceSequence(i_seqDispensePosition);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_EtOH_HVFTMultidispenseFromTroughToPlate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_Normalize_LVFTForSampleTransferSVFTForBufferTransfer( device & ML_STAR, variable i_strNormalizationFile, sequence & io_seqBuffer, sequence & io_seqSourcePlate, sequence & io_seqDestinationPlate, variable i_strLiquidClassNameTransferBUFFER, variable i_strLiquidClassNameTransferSAMPLE, sequence & io_seqPlateSeqForJustBuffer, sequence & io_seqPoolingPlate, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable loopCounter1;
    private variable loopCounter2;
    private file file1;
    private variable arr_NormalizationVolumes[];
    private variable arr_NormVolDispense[];
    private variable arr_NormVolDispenseExtra[];
    private variable intCurrentDispenseMode;
    private variable intCurrentTipTypePipSAMPLE;
    private variable intCurrentTipTypePipBUFFER;
    private variable retValueDialog;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private variable fltBufferVolume;
    private variable fltDispenseVolumeBufferForNormalization;
    private variable fltExtraVolume;
    private variable strLabwareID_DestinationPlate;
    private variable strLabwareID_PoolingPlate;
    private variable strLabwareID_SourcePlate;
    private variable intLinesInTheFile;
    private variable fltSampleConcentrationFromFile;
    private variable strLabwareID;
    private variable strWellID_Pool;
    private variable strWellID_Source;
    private variable intArrayIndexCounter;
    private dialog customDialog_19;
    private dialog customDialog_20;
    private dialog customDialog_21;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_Normalize_LVFTForSampleTransferSVFTForBufferTransfer <<<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("PIP_Normalize_LVFTForSampleTransferSVFTForBufferTransfer"), i_blnUpdateInformationIntoReporFile);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransferSAMPLE, intCurrentTipTypePipSAMPLE, intCurrentDispenseMode);
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransferBUFFER, intCurrentTipTypePipBUFFER, intCurrentDispenseMode);
      strLabwareID_SourcePlate = SeqGetLabwareId(io_seqSourcePlate);
      strLabwareID_DestinationPlate = SeqGetLabwareId(io_seqDestinationPlate);
      strLabwareID_PoolingPlate = SeqGetLabwareId(io_seqPoolingPlate);
      SeqRemoveAll(io_seqSourcePlate);
      SeqRemoveAll(io_seqDestinationPlate);
      SeqRemoveAll(io_seqPoolingPlate);
      file1.AddField("SourceWell", strWellID_Source, hslString, 255);
      file1.AddField("nM", fltSampleConcentrationFromFile, hslFloat);
      file1.AddField("PoolWell", strWellID_Pool, hslString, 255);
      if( 0 == file1.Open(i_strNormalizationFile + " " + "Sheet1$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strNormalizationFile, "HxMetEdCompCmd");
      }
      arr_NormalizationVolumes.SetSize(0);
      arr_NormVolDispense.SetSize(0);
      {
        intLinesInTheFile = 0;
        while (
           (file1.Eof() == 0)
        )
        {
          intLinesInTheFile = intLinesInTheFile + 1;
          if( 0 == file1.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          fltBufferVolume = fltSampleConcentrationFromFile - 10;
          fltBufferVolume = MthRound(fltBufferVolume, 1);
          Trace ("Source well ", strWellID_Source, ", Concentration (nM) = ", fltSampleConcentrationFromFile, ", so Buffer Volume is ", fltBufferVolume, "ul.");
          if (fltBufferVolume > 300)
          {
            fltBufferVolume = 300;
          }
          fltDispenseVolumeBufferForNormalization = fltBufferVolume + 0;
          arr_NormalizationVolumes.AddAsLast(fltBufferVolume);
          arr_NormVolDispense.AddAsLast(fltDispenseVolumeBufferForNormalization);
          SeqAdd(io_seqSourcePlate, strLabwareID_SourcePlate, strWellID_Source);
          SeqAdd(io_seqDestinationPlate, strLabwareID_DestinationPlate, strWellID_Source);
          SeqAdd(io_seqPoolingPlate, strLabwareID_PoolingPlate, strWellID_Pool);
        }
      }
      if( 0 != file1.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file1.RemoveFields();
      io_seqSourcePlate.SetCurrentPosition(1);
      io_seqDestinationPlate.SetCurrentPosition(1);
      io_seqPoolingPlate.SetCurrentPosition(1);
      MECC::TraceComment(Translate("************* Pipette the 10ul sample to the plate...."));
      if (intCurrentTipTypePipSAMPLE == 23)
      {
        if(0){
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        }
        {
          loopCounter2 = 0;
          while (
             (io_seqSourcePlate.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, io_seqBuffer, 1, io_seqSourcePlate, 1, seq_Tips50, 1, io_seqDestinationPlate, 1);
            loopCounter2 = loopCounter2 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            DATA_TipCounterWrite(ML_STAR);
            if (
               (io_seqSourcePlate.GetCurrentPosition() > 0 && io_seqSourcePlate.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          io_seqBuffer.SetMax(io_seqBuffer.GetTotal());
          io_seqSourcePlate.SetMax(io_seqSourcePlate.GetTotal());
          seq_Tips50.SetMax(seq_Tips50.GetTotal());
          io_seqDestinationPlate.SetMax(io_seqDestinationPlate.GetTotal());
          io_seqBuffer.SetCurrentPosition(1);
          io_seqSourcePlate.SetCurrentPosition(1);
          io_seqDestinationPlate.SetCurrentPosition(1);
        }
        if(0){
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
        customDialog_21.InitCustomDialog("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");
        customDialog_21.ShowCustomDialog();
        retValueDialog = customDialog_21.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
      MECC::TraceComment(Translate("************* Pipette flexible volume of the buffer to the  pooling plate...."));
      intArrayIndexCounter = 1;
      if (intCurrentTipTypePipBUFFER == 1)
      {
        {
          loopCounter2 = 0;
          while (
             (io_seqDestinationPlate.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, io_seqBuffer, 1, seq_Tips300, 1, io_seqDestinationPlate, 1);
            loopCounter2 = loopCounter2 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            intArrayIndexCounter = intArrayIndexCounter + 8;
            DATA_TipCounterWrite(ML_STAR);
            if (
               (io_seqDestinationPlate.GetCurrentPosition() > 0 && io_seqDestinationPlate.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          io_seqBuffer.SetMax(io_seqBuffer.GetTotal());
          seq_Tips300.SetMax(seq_Tips300.GetTotal());
          io_seqDestinationPlate.SetMax(io_seqDestinationPlate.GetTotal());
          io_seqBuffer.SetCurrentPosition(1);
          io_seqDestinationPlate.SetCurrentPosition(1);
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
        customDialog_20.InitCustomDialog("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");
        customDialog_20.ShowCustomDialog();
        retValueDialog = customDialog_20.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
      MECC::TraceComment(Translate("************* Pipette extra buffer to the plate (and mix) when the required buffer volume is greater than 290ul...."));
      strLabwareID = SeqGetLabwareId(io_seqDestinationPlate);
      SeqRemoveAll(io_seqPlateSeqForJustBuffer);
      arr_NormVolDispenseExtra.SetSize(0);
      file1.AddField("SourceWell", strWellID_Source, hslString, 255);
      file1.AddField("nM", fltSampleConcentrationFromFile, hslFloat);
      if( 0 == file1.Open(i_strNormalizationFile + " " + "Sheet1$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strNormalizationFile, "HxMetEdCompCmd");
      }
      {
        loopCounter1 = 0;
        while (
           (file1.Eof() == 0)
        )
        {
          loopCounter1 = loopCounter1 + 1;
          if( 0 == file1.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          fltBufferVolume = fltSampleConcentrationFromFile - 10;
          fltBufferVolume = MthRound(fltBufferVolume, 1);
          if (fltBufferVolume > 300)
          {
            fltExtraVolume = fltBufferVolume - 300;
            if (fltExtraVolume > 300)
            {
              Trace ("WARNING!!! For well ", strWellID_Source, ", in the normalization plate, ", fltExtraVolume, "ul extra buffer is required, but only 300 will be pipetted.");
              fltExtraVolume = 300;
            }
            else
            {
              Trace ("For well ", strWellID_Source, ", in the normalization plate, ", fltExtraVolume, "ul extra buffer is required.");
            }
            arr_NormVolDispenseExtra.AddAsLast(fltExtraVolume);
            SeqAdd(io_seqPlateSeqForJustBuffer, strLabwareID, strWellID_Source);
          }
        }
      }
      if( 0 != file1.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file1.RemoveFields();
      io_seqPlateSeqForJustBuffer.SetCurrentPosition(1);
      intArrayIndexCounter = 1;
      if (intCurrentTipTypePipBUFFER == 1)
      {
        {
          loopCounter2 = 0;
          while (
             (io_seqPlateSeqForJustBuffer.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, io_seqBuffer, 1, seq_Tips300, 1, io_seqPlateSeqForJustBuffer, 1);
            loopCounter2 = loopCounter2 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	strStepReturnValueAspiration = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            intArrayIndexCounter = intArrayIndexCounter + 8;
            DATA_TipCounterWrite(ML_STAR);
            if (
               (io_seqPlateSeqForJustBuffer.GetCurrentPosition() > 0 && io_seqPlateSeqForJustBuffer.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          io_seqBuffer.SetMax(io_seqBuffer.GetTotal());
          seq_Tips300.SetMax(seq_Tips300.GetTotal());
          io_seqPlateSeqForJustBuffer.SetMax(io_seqPlateSeqForJustBuffer.GetTotal());
          io_seqBuffer.SetCurrentPosition(1);
          io_seqPlateSeqForJustBuffer.SetCurrentPosition(1);
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
        customDialog_19.InitCustomDialog("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");
        customDialog_19.ShowCustomDialog();
        retValueDialog = customDialog_19.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, io_seqBuffer);
      STCC::AddFilterSequence(ML_STAR, io_seqSourcePlate);
      {
        variable _FilterIdsArray_22[];
        variable _ColumnIdsArray_22[];
        variable _ColumnNamesArray_22[];
        variable _ExperimentsArray_22[];
        _FilterIdsArray_22.SetSize(0);
        _ColumnNamesArray_22.SetSize(14);
        _ColumnIdsArray_22.SetSize(14);
        _ColumnNamesArray_22.SetAt(0, "RecordId");
        _ColumnIdsArray_22.SetAt(0, 0);
        _ColumnNamesArray_22.SetAt(1, "TRackBC");
        _ColumnIdsArray_22.SetAt(1, 1);
        _ColumnNamesArray_22.SetAt(2, "TLabwareId");
        _ColumnIdsArray_22.SetAt(2, 2);
        _ColumnNamesArray_22.SetAt(3, "TPositionId");
        _ColumnIdsArray_22.SetAt(3, 3);
        _ColumnNamesArray_22.SetAt(4, "TPositionBC");
        _ColumnIdsArray_22.SetAt(4, 4);
        _ColumnNamesArray_22.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_22.SetAt(5, 5);
        _ColumnNamesArray_22.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_22.SetAt(6, 6);
        _ColumnNamesArray_22.SetAt(7, "TVolume");
        _ColumnIdsArray_22.SetAt(7, 7);
        _ColumnNamesArray_22.SetAt(8, "SRackBC");
        _ColumnIdsArray_22.SetAt(8, 8);
        _ColumnNamesArray_22.SetAt(9, "SLabwareId");
        _ColumnIdsArray_22.SetAt(9, 9);
        _ColumnNamesArray_22.SetAt(10, "SPositionId");
        _ColumnIdsArray_22.SetAt(10, 10);
        _ColumnNamesArray_22.SetAt(11, "SPositionBC");
        _ColumnIdsArray_22.SetAt(11, 11);
        _ColumnNamesArray_22.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_22.SetAt(12, 12);
        _ColumnNamesArray_22.SetAt(13, "UserName");
        _ColumnIdsArray_22.SetAt(13, 13);
        _ExperimentsArray_22.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, io_seqDestinationPlate, 3, _FilterIdsArray_22, 0, _ColumnIdsArray_22, _ColumnNamesArray_22, _ExperimentsArray_22, "Normalization_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_Normalize_LVFTForSampleTransferSVFTForBufferTransfer <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _PIP_HVFTMultidispenseFromTroughToPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable loopCounter2;
    private variable loopCounter3;
    private variable strCurrentDispenseMode;
    private variable strTypeOfLabware;
    private variable intNumberOfSamples;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable strLabwareIDAspiration;
    private variable intMaximalDispensesPerAspiration;
    private variable fltMaximalDispensesPerAspiration;
    private variable intMaximalDispensesPer2Aspirations;
    private variable intMaximalDispensesPer3Aspirations;
    private variable intMixCycles;
    private variable intLabwareTypeIsABeadsTrough;
    private variable retValueDialog;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private variable fltAspirationVolume;
    private variable fltAspirationVolume_Loop1;
    private variable fltAspirationVolume_Loop2;
    private variable fltAspirationVolume_Loop3;
    private variable fltAspirationVolume_Loop4;
    private variable fltMixVolume;
    private variable intNumberOfAliquotsPerAsp1;
    private variable intNumberOfAliquotsPerAsp2;
    private variable intNumberOfAliquotsPerAsp3;
    private variable intNumberOfAliquotsPerAsp4;
    private variable intNumberOfAspirations;
    private variable intNumberOfColumns;
    private variable intNumberOfDispenses;
    private variable intNumberOfDispenses1;
    private variable intNumberOfDispenses2;
    private variable intNumberOfDispenses3;
    private variable intNumberOfDispenses4;
    private variable intNumberOfRemainingWells;
    private dialog customDialog_23;
    private variable intVolumeMixPerChannel;
    private variable fltVolumeAspirateChannel1;
    private variable fltMeasuredVolume_Channel1;
    private variable intVolumeMix;
    private variable strChannelPatternBeads;
    MECC::TraceComment(Translate("ииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииии\n>>>>>>>>>> Submethod:  _PIP_HVFTMultidispenseFromTroughToPlate<<<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("_PIP_HVFTMultidispenseFromTroughToPlate"), i_blnUpdateInformationIntoReporFile);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
      strLabwareIDAspiration = SeqGetLabwareId(i_seqAspirationPosition);
      intLabwareTypeIsABeadsTrough = StrFind(strLabwareIDAspiration, Translate("Beads"));
      if (intLabwareTypeIsABeadsTrough > 0)
      {
        MECC::TraceComment(Translate("Reagent trough  contains beads --> mix cycles = 6 during aspiration"));
        intMixCycles = 6;
      }
      else
      {
        intMixCycles = 0;
      }
      Trace ("mix cycles during aspiration:  ", intMixCycles);
      _DATA_InterpreteLabwareID(strLabwareIDAspiration, strTypeOfLabware);
      intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (intCurrentDispenseMode == 2)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (intCurrentDispenseMode == 4)
        {
          strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          strCurrentDispenseMode = Translate("Empty");
        }
      }
      Trace ("Current dispense mode:  ", strCurrentDispenseMode);
      if (strCurrentDispenseMode == "Part")
      {
        if (intCurrentTipType == 5)
        {
          Trace ("Volume per well:  ", i_fltVolume);
          MECC::TraceComment(Translate("Calculations for dispensing ..........."));
          _intNumberOfCompleteColumns = intNumberOfSamples / 8;
          intNumberOfRemainingWells = intNumberOfSamples % 8;
          Trace ("Number of Complete Columns in Destination Plate:  ", _intNumberOfCompleteColumns);
          Trace ("Number of Wells in Last, Incomplete Column:  ", intNumberOfRemainingWells);
          if (intNumberOfRemainingWells > 0)
          {
            intNumberOfColumns = _intNumberOfCompleteColumns + 1;
          }
          else
          {
            intNumberOfColumns = _intNumberOfCompleteColumns;
          }
          Trace ("Total Number of Columns:  ", intNumberOfColumns);
          fltMaximalDispensesPerAspiration = 1000 / (i_fltVolume * 1.0);
          intMaximalDispensesPerAspiration = MthFloor(fltMaximalDispensesPerAspiration);
          intMaximalDispensesPerAspiration = intMaximalDispensesPerAspiration - 2;
          Trace ("Maximal Number of Dispenses per Aspiration = ", intMaximalDispensesPerAspiration);
          intNumberOfAspirations = intNumberOfColumns / (intMaximalDispensesPerAspiration * 1.0);
          intNumberOfAspirations = MthCeiling(intNumberOfAspirations);
          if (intNumberOfAspirations == 1)
          {
            if (intNumberOfColumns < intMaximalDispensesPerAspiration)
            {
              MECC::TraceComment(Translate("Number of columns are less then Maximal Dispenses per Aspiration"));
              intNumberOfDispenses1 = intNumberOfColumns;
            }
            else
            {
              MECC::TraceComment(Translate("Number of columns are equal to Maximal Dispenses per Aspiration"));
              intNumberOfDispenses1 = intMaximalDispensesPerAspiration;
            }
            intNumberOfDispenses2 = 0;
            intNumberOfDispenses3 = 0;
            intNumberOfDispenses4 = 0;
          }
          if (intNumberOfAspirations == 2)
          {
            intNumberOfDispenses1 = intMaximalDispensesPerAspiration;
            intNumberOfDispenses2 = intNumberOfColumns - intMaximalDispensesPerAspiration;
            intNumberOfDispenses3 = 0;
          }
          if (intNumberOfAspirations == 3)
          {
            intNumberOfDispenses1 = intMaximalDispensesPerAspiration;
            intNumberOfDispenses2 = intMaximalDispensesPerAspiration;
            intMaximalDispensesPer2Aspirations = intMaximalDispensesPerAspiration * 2;
            intNumberOfDispenses3 = intNumberOfColumns - intMaximalDispensesPer2Aspirations;
          }
          if (intNumberOfAspirations == 4)
          {
            intNumberOfDispenses1 = intMaximalDispensesPerAspiration;
            intNumberOfDispenses2 = intMaximalDispensesPerAspiration;
            intNumberOfDispenses3 = intMaximalDispensesPerAspiration;
            intMaximalDispensesPer3Aspirations = intMaximalDispensesPerAspiration * 3;
            intNumberOfDispenses4 = intNumberOfColumns - intMaximalDispensesPer3Aspirations;
          }
          if (intNumberOfDispenses1 > 0)
          {
            intNumberOfAliquotsPerAsp1 = intNumberOfDispenses1 + 2;
            fltAspirationVolume_Loop1 = i_fltVolume * intNumberOfAliquotsPerAsp1;
          }
          if (intNumberOfDispenses2 > 0)
          {
            intNumberOfAliquotsPerAsp2 = intNumberOfDispenses2 + 2;
            fltAspirationVolume_Loop2 = i_fltVolume * intNumberOfAliquotsPerAsp2;
          }
          else
          {
            fltAspirationVolume_Loop2 = 0;
            fltAspirationVolume_Loop3 = 0;
            fltAspirationVolume_Loop4 = 0;
          }
          if (intNumberOfDispenses3 > 0)
          {
            intNumberOfAliquotsPerAsp3 = intNumberOfDispenses3 + 2;
            fltAspirationVolume_Loop3 = i_fltVolume * intNumberOfAliquotsPerAsp3;
          }
          else
          {
            fltAspirationVolume_Loop3 = 0;
            fltAspirationVolume_Loop4 = 0;
          }
          if (intNumberOfDispenses4 > 0)
          {
            intNumberOfAliquotsPerAsp4 = intNumberOfDispenses4 + 2;
            fltAspirationVolume_Loop4 = i_fltVolume * intNumberOfAliquotsPerAsp4;
          }
          else
          {
            fltAspirationVolume_Loop4 = 0;
          }
          Trace ("Number of Aspirations:  ", intNumberOfAspirations);
          Trace ("Number of Columns for the first set of dispenses:  ", intNumberOfDispenses1);
          Trace ("Number of Columns for the second set of dispenses:  ", intNumberOfDispenses2);
          Trace ("Number of Columns for the third set of dispenses:  ", intNumberOfDispenses3);
          Trace ("Number of Columns for the fourth set of dispenses:  ", intNumberOfDispenses4);
          Trace ("Aspiration volume for the first set of dispenses:  ", fltAspirationVolume_Loop1);
          Trace ("Aspiration volume for the second set of dispenses:  ", fltAspirationVolume_Loop2);
          Trace ("Aspiration volume for the third set of dispenses:  ", fltAspirationVolume_Loop3);
          Trace ("Aspiration volume for the fourth set of dispenses:  ", fltAspirationVolume_Loop4);
          if (fltAspirationVolume_Loop1 > 0)
          {
            _DATA_PlausibilityCheckVolume(fltAspirationVolume_Loop1, 5);
          }
          if (fltAspirationVolume_Loop2 > 0)
          {
            _DATA_PlausibilityCheckVolume(fltAspirationVolume_Loop2, 5);
          }
          if (fltAspirationVolume_Loop3 > 0)
          {
            _DATA_PlausibilityCheckVolume(fltAspirationVolume_Loop3, 5);
          }
          if (fltAspirationVolume_Loop4 > 0)
          {
            _DATA_PlausibilityCheckVolume(fltAspirationVolume_Loop4, 5);
          }
          MECC::TraceComment(Translate("********** Fill plate  ..........."));
          if(0){
            TrcTraceSequence(i_seqDispensePosition);
          }
          {
            loopCounter2 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, i_seqDispensePosition, 1);
              loopCounter2 = loopCounter2 + 1;
              if (loopCounter2 == 1)
              {
                strChannelPatternBeads = Translate("11111111");
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
                {
                  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  fltMeasuredVolume_Channel1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, i_seqAspirationPosition, 0, Translate("10000000"), 0, 0, 0);
                  fltVolumeAspirateChannel1 = HSLML_STAR::GetContainerVolume(1);
                  fltVolumeAspirateChannel1 = fltVolumeAspirateChannel1 * 1000;
                  intVolumeMix = fltVolumeAspirateChannel1 * 0.7;
                  intVolumeMixPerChannel = intVolumeMix / (8 * 1.0);
                  if (intVolumeMixPerChannel > 900)
                  {
                    intVolumeMixPerChannel = 900;
                  }
                  intVolumeMix = intVolumeMixPerChannel;
                  TrcTrace(Translate(" >>>>>>>>>>>>>>>>>> intVolumeMix: "), intVolumeMix);
                  TrcTrace(Translate(" >>>>>>>>>>>>>>>>>> intVolumeMixPerChannel: "), intVolumeMixPerChannel);
                }
                else
                {
                  intVolumeMixPerChannel = 200;
                }
              }
              if (loopCounter2 == 1)
              {
                fltAspirationVolume = fltAspirationVolume_Loop1;
                intNumberOfDispenses = intNumberOfDispenses1;
                if (fltAspirationVolume >= 1000)
                {
                  fltMixVolume = 1000;
                }
                else
                {
                  if (fltAspirationVolume < 250)
                  {
                    fltMixVolume = 250;
                  }
                  else
                  {
                    fltMixVolume = fltAspirationVolume_Loop1;
                  }
                }
              }
              if (loopCounter2 == 2)
              {
                fltAspirationVolume = fltAspirationVolume_Loop2;
                intNumberOfDispenses = intNumberOfDispenses2;
                if (fltAspirationVolume >= 1000)
                {
                  fltMixVolume = 1000;
                }
                else
                {
                  if (fltAspirationVolume < 250)
                  {
                    fltMixVolume = 250;
                  }
                  else
                  {
                    fltMixVolume = fltAspirationVolume_Loop2;
                  }
                }
              }
              if (loopCounter2 == 3)
              {
                fltAspirationVolume = fltAspirationVolume_Loop3;
                intNumberOfDispenses = intNumberOfDispenses3;
                if (fltAspirationVolume >= 1000)
                {
                  fltMixVolume = 1000;
                }
                else
                {
                  if (fltAspirationVolume < 250)
                  {
                    fltMixVolume = 250;
                  }
                  else
                  {
                    fltMixVolume = fltAspirationVolume_Loop3;
                  }
                }
              }
              if (loopCounter2 == 4)
              {
                fltAspirationVolume = fltAspirationVolume_Loop4;
                intNumberOfDispenses = intNumberOfDispenses4;
                if (fltAspirationVolume >= 1000)
                {
                  fltMixVolume = 1000;
                }
                else
                {
                  if (fltAspirationVolume < 250)
                  {
                    fltMixVolume = 250;
                  }
                  else
                  {
                    fltMixVolume = fltAspirationVolume_Loop4;
                  }
                }
              }
              Trace ("MainLoopCounter Multidispense    :  ", loopCounter2);
              Trace ("Aspiration volume                :  ", fltAspirationVolume);
              Trace ("Pre-Mix volume                   :  ", fltMixVolume);
              Trace ("Dispense volume                  :  ", i_fltVolume);
              fltMixVolume = intVolumeMixPerChannel;
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              {
                for(loopCounter3 = 0; loopCounter3 < intNumberOfDispenses;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  Trace ("SubLoopCounter during Multidispense :  ", loopCounter3);
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	strStepReturnValueDispense = arrRetValues[2];
                  }
                  _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
                }
              }
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
          DATA_TipCounterWrite(ML_STAR);
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        else
        {
          MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
          customDialog_23.InitCustomDialog("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");
          customDialog_23.ShowCustomDialog();
          retValueDialog = customDialog_23.GetCustomDialogProperty( "ReturnValue" );
          abort;
        }
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, i_seqAspirationPosition);
      {
        variable _FilterIdsArray_24[];
        variable _ColumnIdsArray_24[];
        variable _ColumnNamesArray_24[];
        variable _ExperimentsArray_24[];
        _FilterIdsArray_24.SetSize(0);
        _ColumnNamesArray_24.SetSize(14);
        _ColumnIdsArray_24.SetSize(14);
        _ColumnNamesArray_24.SetAt(0, "RecordId");
        _ColumnIdsArray_24.SetAt(0, 0);
        _ColumnNamesArray_24.SetAt(1, "TRackBC");
        _ColumnIdsArray_24.SetAt(1, 1);
        _ColumnNamesArray_24.SetAt(2, "TLabwareId");
        _ColumnIdsArray_24.SetAt(2, 2);
        _ColumnNamesArray_24.SetAt(3, "TPositionId");
        _ColumnIdsArray_24.SetAt(3, 3);
        _ColumnNamesArray_24.SetAt(4, "TPositionBC");
        _ColumnIdsArray_24.SetAt(4, 4);
        _ColumnNamesArray_24.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_24.SetAt(5, 5);
        _ColumnNamesArray_24.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_24.SetAt(6, 6);
        _ColumnNamesArray_24.SetAt(7, "TVolume");
        _ColumnIdsArray_24.SetAt(7, 7);
        _ColumnNamesArray_24.SetAt(8, "SRackBC");
        _ColumnIdsArray_24.SetAt(8, 8);
        _ColumnNamesArray_24.SetAt(9, "SLabwareId");
        _ColumnIdsArray_24.SetAt(9, 9);
        _ColumnNamesArray_24.SetAt(10, "SPositionId");
        _ColumnIdsArray_24.SetAt(10, 10);
        _ColumnNamesArray_24.SetAt(11, "SPositionBC");
        _ColumnIdsArray_24.SetAt(11, 11);
        _ColumnNamesArray_24.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_24.SetAt(12, 12);
        _ColumnNamesArray_24.SetAt(13, "UserName");
        _ColumnIdsArray_24.SetAt(13, 13);
        _ExperimentsArray_24.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqDispensePosition, 3, _FilterIdsArray_24, 0, _ColumnIdsArray_24, _ColumnNamesArray_24, _ExperimentsArray_24, "Multidispense_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  _PIP_HVFTMultidispenseFromTroughToPlate <<<<<<<<<<\n-----------------------------------------------------------------------------------------------------------------------------------------------------------"));
  }

  private function _Trp_MIDIwithCOREGripper( device & ML_STAR, sequence & i_seqMIDIStartingPosition, sequence & i_seqMIDIDestinationPosition, variable i_intTrackNumberToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode ) void {
    private variable ret_DestinationLabwareID;
    private variable blnPlateCheck;
    private variable intPressOnDistance;
    private variable strCurrentBarcodeRead;
    private variable ret_SourceLabwareID;
    private variable retValFoundSubString;
    private variable intGripHeight;
    private variable intGripOpening;
    private variable intGripWidth;
    o_strReadCurrentBarcode = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>> Submethod:  Move_MIDI_wCOREgrippers <<<<<<<<<<"));
    MECC::TraceComment(Translate("Using CORE grippers for MIDI movements"));
    intGripWidth = 79;
    intGripOpening = 87;
    ret_DestinationLabwareID = SeqGetLabwareId(i_seqMIDIDestinationPosition);
    ret_SourceLabwareID = SeqGetLabwareId(i_seqMIDIStartingPosition);
    retValFoundSubString = StrFind(ret_SourceLabwareID, Translate("ABGENE"));
    if (retValFoundSubString < 0)
    {
      intGripHeight = 15;
    }
    else
    {
      intGripHeight = 8;
    }
    if (ret_DestinationLabwareID == "MIDI_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMIDIStartingPosition, -20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMIDIDestinationPosition, -60, 0, 8);
    }
    if (i_intTrackNumberToReadBarcode > 0)
    {
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      i_intTrackNumberToReadBarcode = 5;
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._E59329BC_113D_451D_9468_F2327ECEE33E("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"); // ZSwapReadBarcode
        	strCurrentBarcodeRead = arrRetValues[3];
      }
      o_strReadCurrentBarcode = strCurrentBarcodeRead;
      Trace ("Current barcode read by autoload = ", strCurrentBarcodeRead);
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      o_strReadCurrentBarcode = Translate("No barcode reading activated");
    }
    blnPlateCheck = 1;
    intPressOnDistance = 1;
    if (ret_DestinationLabwareID == "HHS4_MIDI")
    {
      blnPlateCheck = 0;
      intPressOnDistance = 0;
    }
    if (ret_DestinationLabwareID == "HHS5_MIDI")
    {
      blnPlateCheck = 0;
      intPressOnDistance = 0;
    }
    if (ret_DestinationLabwareID == "MIDI_Waste")
    {
      blnPlateCheck = 0;
    }
    if (i_blnParkTransportToolAfterMove == 1)
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    else
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    if (ret_DestinationLabwareID == "MIDI_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMIDIStartingPosition, 20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMIDIDestinationPosition, 60, 0, -8);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Move_MIDI_wCOREgrippers <<<<<<<<<<\n"));
  }

  private function _Trp_HSPwithCOREGripper( device & ML_STAR, sequence & i_seqHSPStartingPosition, sequence & i_seqHSPDestinationPosition, variable i_intTrackNumberToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode ) void {
    private variable ret_DestinationLabwareID;
    private variable blnPlateCheck;
    private variable strCurrentBarcodeRead;
    o_strReadCurrentBarcode = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>> Submethod: _Trp_HSPwithCOREGripper <<<<<<<<<"));
    MECC::TraceComment(Translate("Using CORE grippers for HSP movements"));
    ret_DestinationLabwareID = SeqGetLabwareId(i_seqHSPDestinationPosition);
    if (ret_DestinationLabwareID == "HSP_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPStartingPosition, -20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPDestinationPosition, -60, 0, 0);
    }
    if (ret_DestinationLabwareID == "HSP_DFP_OnStacker")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPStartingPosition, -35, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPDestinationPosition, -35, 0, 0);
    }
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    if (i_intTrackNumberToReadBarcode > 0)
    {
      i_intTrackNumberToReadBarcode = 5;
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._E59329BC_113D_451D_9468_F2327ECEE33E("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"); // ZSwapReadBarcode
        	strCurrentBarcodeRead = arrRetValues[3];
      }
      o_strReadCurrentBarcode = strCurrentBarcodeRead;
      Trace ("Current barcode read by autoload = ", strCurrentBarcodeRead);
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      o_strReadCurrentBarcode = Translate("No barcode reading activated");
    }
    blnPlateCheck = 0;
    if (ret_DestinationLabwareID == "HSP_CPAC")
    {
      blnPlateCheck = 1;
    }
    if (i_blnParkTransportToolAfterMove == 1)
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    else
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    if (ret_DestinationLabwareID == "HSP_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPStartingPosition, 20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPDestinationPosition, 60, 0, 0);
    }
    if (ret_DestinationLabwareID == "HSP_DFP_OnStacker")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPStartingPosition, 35, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPDestinationPosition, 35, 0, 0);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  _Trp_HSPwithCOREGripper <<<<<<<<<<\n"));
  }

  function PIP_BeadsFromTubesOrTroughToPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolBeads, variable i_strLiquidClassNameTransfer, variable i_strLiquidClassNameMixing, variable i_blnTipExchangeDuringTransfer, sequence seq_Mixing, variable i_blnMixWithSVFT, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable loopCounter1;
    private variable loopCounter2;
    private variable arr_MixVols[];
    private variable intNumberOfSamples;
    private variable strTypeOfLabware;
    private variable strLabwareIDBeads;
    private variable intCurrentTipType;
    private variable intCurrentDispenseMode;
    private variable strCurrentDispenseMode;
    private variable intGetTotalOFSeqDispense;
    private variable intVolumeMix;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private variable intChannelPatternBeads;
    private variable strChannelPatternMixingStep;
    private variable fltVolumeBeadsFirst48Wells;
    private variable strLabwareID_Vial;
    private variable intPositionID_Vial_1;
    private variable intPositionID_Vial_2;
    private variable fltMixVolumeBeadsVial1;
    private variable fltMixVolumeBeadsVial2;
    private variable intNumberSamplesMoreThan48;
    private variable intNumberSamplesUpTo48;
    private variable fltTotalVolumeBeads;
    private variable fltRemainingBeadVolume;
    private variable intVolumeMixPerChannel;
    private variable fltVolumeAspirateChannel1;
    private variable fltMeasuredVolume_Channel1;
    private variable intCyclesMix;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_BeadsFromTubesOrTroughToPlate <<<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("PIP_BeadsFromTubesOrTroughToPlate"), i_blnUpdateInformationIntoReporFile);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
      _DATA_PlausibilityCheckVolume(i_fltVolBeads, intCurrentTipType);
      strLabwareIDBeads = SeqGetLabwareId(i_seqAspirationPosition);
      _DATA_InterpreteLabwareID(strLabwareIDBeads, strTypeOfLabware);
      intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (intCurrentDispenseMode == 2)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (intCurrentDispenseMode == 4)
        {
          strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (strCurrentDispenseMode == "Empty")
      {
        if (strTypeOfLabware == "tube")
        {
          fltTotalVolumeBeads = i_fltVolBeads * intNumberOfSamples;
          if (intNumberOfSamples > 48)
          {
            strChannelPatternMixingStep = Translate("11000000");
            fltVolumeBeadsFirst48Wells = i_fltVolBeads * 48;
            fltRemainingBeadVolume = fltTotalVolumeBeads - fltVolumeBeadsFirst48Wells;
            fltMixVolumeBeadsVial1 = fltVolumeBeadsFirst48Wells / (2 * 1.0);
            fltMixVolumeBeadsVial2 = fltRemainingBeadVolume / (2 * 1.0);
            if (fltMixVolumeBeadsVial1 > 1000)
            {
              fltMixVolumeBeadsVial1 = 1000;
            }
            if (fltMixVolumeBeadsVial2 > 1000)
            {
              fltMixVolumeBeadsVial2 = 1000;
            }
          }
          else
          {
            strChannelPatternMixingStep = Translate("10000000");
            fltMixVolumeBeadsVial1 = fltTotalVolumeBeads / (2 * 1.0);
            if (fltMixVolumeBeadsVial1 > 1000)
            {
              fltMixVolumeBeadsVial1 = 1000;
            }
          }
          Trace ("Volume per sample well:  ", i_fltVolBeads);
          Trace ("Mix volume, channel 1:  ", fltMixVolumeBeadsVial1);
          Trace ("Mix volume, channel 2:  ", fltMixVolumeBeadsVial2);
          arr_MixVols.SetSize(2);
          arr_MixVols.SetAt(1-1, fltMixVolumeBeadsVial1);
          arr_MixVols.SetAt(2-1, fltMixVolumeBeadsVial2);
          MECC::TraceComment(Translate("********* Premix in vial with 1 or 2 1ml Tips ***********"));
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          DATA_TipCounterWrite(ML_STAR);
          if (intNumberOfSamples > 48)
          {
            intNumberSamplesMoreThan48 = intNumberOfSamples - 48;
            intNumberSamplesUpTo48 = intNumberOfSamples - (2 * intNumberSamplesMoreThan48);
          }
          else
          {
            intNumberSamplesMoreThan48 = 0;
            intNumberSamplesUpTo48 = intNumberOfSamples;
          }
          strLabwareID_Vial = SeqGetLabwareId(i_seqAspirationPosition);
          intPositionID_Vial_1 = SeqGetPositionId(i_seqAspirationPosition);
          SeqIncrement(i_seqAspirationPosition, 1);
          intPositionID_Vial_2 = SeqGetPositionId(i_seqAspirationPosition);
          SeqRemoveAll(i_seqAspirationPosition);
          {
            for(loopCounter2 = 0; loopCounter2 < intNumberSamplesMoreThan48;)
            {
              loopCounter2 = loopCounter2 + 1;
              SeqAdd(i_seqAspirationPosition, strLabwareID_Vial, intPositionID_Vial_1);
              SeqAdd(i_seqAspirationPosition, strLabwareID_Vial, intPositionID_Vial_2);
            }
          }
          {
            for(loopCounter2 = 0; loopCounter2 < intNumberSamplesUpTo48;)
            {
              loopCounter2 = loopCounter2 + 1;
              SeqAdd(i_seqAspirationPosition, strLabwareID_Vial, intPositionID_Vial_1);
            }
          }
          i_seqAspirationPosition.SetCurrentPosition(1);
        }
        if (strTypeOfLabware == "trough")
        {
          intGetTotalOFSeqDispense = SeqGetTotal(i_seqDispensePosition);
          if (intGetTotalOFSeqDispense < 25)
          {
            intVolumeMix = 400;
          }
          if (intGetTotalOFSeqDispense > 25)
          {
            if (intGetTotalOFSeqDispense < 48)
            {
              intVolumeMix = 650;
            }
            else
            {
              intVolumeMix = 950;
            }
          }
          if (i_blnMixWithSVFT == ASWGLOBAL::BOOL::TRUE)
          {
            intVolumeMix = 280;
          }
          MECC::TraceComment(Translate("********* Premix in trough ***********\nRK: if more than 8 samples are processed, mix with 8 channels. Also different mixing heights\n"));
          intChannelPatternBeads = Translate("11111111");
          if (i_blnMixWithSVFT == ASWGLOBAL::BOOL::TRUE)
          {
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
            if (intNumberOfSamples <= 8)
            {
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            else
            {
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            DATA_TipCounterWrite(ML_STAR);
          }
          else
          {
            intChannelPatternBeads = Translate("11111111");
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            fltMeasuredVolume_Channel1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, i_seqAspirationPosition, 0, Translate("10000000"), 0, 0, 0);
            fltVolumeAspirateChannel1 = HSLML_STAR::GetContainerVolume(1);
            fltVolumeAspirateChannel1 = fltVolumeAspirateChannel1 * 1000;
            intVolumeMix = fltVolumeAspirateChannel1 * 0.6;
            intVolumeMixPerChannel = intVolumeMix / (8 * 1.0);
            if (intVolumeMixPerChannel > 900)
            {
              intVolumeMixPerChannel = 900;
            }
            ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
            if (intNumberOfSamples <= 8)
            {
              intCyclesMix = 6;
            }
            else
            {
              intCyclesMix = 8;
            }
            TrcTrace(Translate(" >>>>>>>>>>>>>>>>>>fltMeasuredVolume_Channel1 (Beads): "), fltMeasuredVolume_Channel1);
            TrcTrace(Translate(" >>>>>>>>>>>>>>>>>> intVolumeMix: "), intVolumeMix);
            TrcTrace(Translate(" >>>>>>>>>>>>>>>>>> intVolumeMixPerChannel: "), intVolumeMixPerChannel);
            TrcTrace(Translate(" >>>>>>>>>>>>>>>>>> intCyclesMix:  "), intCyclesMix);
            if (_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
            {
              intVolumeMixPerChannel = 200;
            }
            intVolumeMix = intVolumeMixPerChannel;
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            DATA_TipCounterWrite(ML_STAR);
          }
        }
        MECC::TraceComment(Translate("********** Now pipetting beads to destination plate"));
        if (intCurrentTipType == 1)
        {
          {
            loopCounter1 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips300, 1, i_seqDispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            seq_Tips300.SetMax(seq_Tips300.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (intCurrentTipType == 5)
        {
          {
            loopCounter1 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips1000, 1, i_seqDispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            seq_Tips1000.SetMax(seq_Tips1000.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (intCurrentTipType == 23)
        {
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
          {
            loopCounter1 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips50, 1, i_seqDispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            seq_Tips50.SetMax(seq_Tips50.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        if (intCurrentTipType == 23)
        {
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
        }
      }
      if (strCurrentDispenseMode == "Part")
      {
        _PIP_HVFTMultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPosition, i_seqDispensePosition, i_fltVolBeads, i_strLiquidClassNameTransfer, i_blnUpdateInformationIntoReporFile);
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, i_seqAspirationPosition);
      {
        variable _FilterIdsArray_25[];
        variable _ColumnIdsArray_25[];
        variable _ColumnNamesArray_25[];
        variable _ExperimentsArray_25[];
        _FilterIdsArray_25.SetSize(0);
        _ColumnNamesArray_25.SetSize(14);
        _ColumnIdsArray_25.SetSize(14);
        _ColumnNamesArray_25.SetAt(0, "RecordId");
        _ColumnIdsArray_25.SetAt(0, 0);
        _ColumnNamesArray_25.SetAt(1, "TRackBC");
        _ColumnIdsArray_25.SetAt(1, 1);
        _ColumnNamesArray_25.SetAt(2, "TLabwareId");
        _ColumnIdsArray_25.SetAt(2, 2);
        _ColumnNamesArray_25.SetAt(3, "TPositionId");
        _ColumnIdsArray_25.SetAt(3, 3);
        _ColumnNamesArray_25.SetAt(4, "TPositionBC");
        _ColumnIdsArray_25.SetAt(4, 4);
        _ColumnNamesArray_25.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_25.SetAt(5, 5);
        _ColumnNamesArray_25.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_25.SetAt(6, 6);
        _ColumnNamesArray_25.SetAt(7, "TVolume");
        _ColumnIdsArray_25.SetAt(7, 7);
        _ColumnNamesArray_25.SetAt(8, "SRackBC");
        _ColumnIdsArray_25.SetAt(8, 8);
        _ColumnNamesArray_25.SetAt(9, "SLabwareId");
        _ColumnIdsArray_25.SetAt(9, 9);
        _ColumnNamesArray_25.SetAt(10, "SPositionId");
        _ColumnIdsArray_25.SetAt(10, 10);
        _ColumnNamesArray_25.SetAt(11, "SPositionBC");
        _ColumnIdsArray_25.SetAt(11, 11);
        _ColumnNamesArray_25.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_25.SetAt(12, 12);
        _ColumnNamesArray_25.SetAt(13, "UserName");
        _ColumnIdsArray_25.SetAt(13, 13);
        _ExperimentsArray_25.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqDispensePosition, 3, _FilterIdsArray_25, 0, _ColumnIdsArray_25, _ColumnNamesArray_25, _ExperimentsArray_25, "Beads_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_BeadsFromTubesOrTroughToPlate<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function Trp_HSPFromAndToODTCwithiSWAP( device & ML_STAR, sequence & i_seqHSPSourcePosition, sequence & i_seqHSPDestinationPosition, variable i_intTrackToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable strCurrentBarcodeRead;
    private variable strInformatioToBeUpdated;
    private variable strSequenceNameStartingPosition;
    private variable strSequenceNameDestinationPosition;
    o_strReadCurrentBarcode = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: Trp_HSPFromAndToODTCwithiSWAP <<<<<<<<<"));
    strSequenceNameStartingPosition = SeqGetName(i_seqHSPSourcePosition);
    strSequenceNameDestinationPosition = SeqGetName(i_seqHSPDestinationPosition);
    strInformatioToBeUpdated = StrConcat8(Translate("Trp_HSPFromAndToODTCwithiSWAP"), Translate(" : "), strSequenceNameStartingPosition, Translate(" -----> "), strSequenceNameDestinationPosition, Translate(""), Translate(""), Translate(""));
    DATA_UpdateInformationIntoReportFile(strInformatioToBeUpdated, i_blnUpdateInformationIntoReporFile);
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    if (i_intTrackToReadBarcode > 0)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._3ADE1686_D394_4a08_918C_20E3EDA3CC69("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"); // ReadPlateBarcode
        	strCurrentBarcodeRead = arrRetValues[3];
      }
      o_strReadCurrentBarcode = strCurrentBarcodeRead;
      Trace ("Current barcode read by autoload = ", strCurrentBarcodeRead);
    }
    else
    {
      o_strReadCurrentBarcode = Translate("No barcode reading activated");
    }
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (i_blnParkTransportToolAfterMove == 1)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: Trp_HSPFromAndToODTCwithiSWAP <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function Trp_HamiltonComfortLidWithiSWAP( device & ML_STAR, sequence & i_seqHamiltonComfortLidSourcePosition, sequence & i_seqHamiltonComfortLidDestinationPosition, variable i_blnParkTransportToolAfterMove, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable strInformatioToBeUpdated;
    private variable strSequenceNameStartingPosition;
    private variable strSequenceNameDestinationPosition;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Trp_HamiltonComfortLidWithiSWAP <<<<<<<<<"));
    strSequenceNameStartingPosition = SeqGetName(i_seqHamiltonComfortLidSourcePosition);
    strSequenceNameDestinationPosition = SeqGetName(i_seqHamiltonComfortLidDestinationPosition);
    strInformatioToBeUpdated = StrConcat8(Translate("Trp_HamiltonComfortLidWithiSWAP"), Translate(" : "), strSequenceNameStartingPosition, Translate(" -----> "), strSequenceNameDestinationPosition, Translate(""), Translate(""), Translate(""));
    DATA_UpdateInformationIntoReportFile(strInformatioToBeUpdated, i_blnUpdateInformationIntoReporFile);
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (i_blnParkTransportToolAfterMove == 1)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Trp_HamiltonComfortLidWithiSWAP <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _DATA_GetTipTypeAndDispenseModeOfLiquidClass( variable i_strLiquidClassName, variable & o_intTiptype, variable & o_intDispenseMode ) void {
    o_intTiptype = 0;
    o_intDispenseMode = 0;
    MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(i_strLiquidClassName);
    o_intTiptype = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
    o_intDispenseMode = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::DispenseMode);
    Trace ("Liquid class name :  ", i_strLiquidClassName, ", Tiptype = ", o_intTiptype, ", DispenseMode = ", o_intDispenseMode);
  }

  private function Abstract(  ) void {
    MECC::TraceComment(Translate("*********************************************************************\nSubmethod Library:  NGSStarProccesses\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate:  Februrary 06, 2018 (By Stephan Grosch)\nVersion:  1.2\n09/18/2017 - V 0.1 Programmed protocol based on TruSeqProcesses v3.0.6 written by Jon Engebretsen, Hamilton Company, San Diego, CA\nRevision history: more informaiton at smt _Version\n\n*********************************************************************"));
  }

  function DATA_HandoverSequencesAndDataToSMT( sequence & i_seqTip50Filter, sequence & i_seqTip300Filter, sequence & i_seqTip300FilterMPH, sequence & i_seqTip300FilterMPHShiftedTipPickupPosition, sequence & i_seqTip1000Filter, sequence & i_seqCOREGripper, variable i_intTransportTool, variable i_blnSimulationON, variable i_strKitName, variable i_blnDeactivatePipettingStepsForTransportTests ) void {
    private variable strCurrentTime;
    private variable strCurrentDate;
    private variable strLabIDTarget;
    private variable strTransferVolume;
    private variable strPosIDTarget;
    private variable strTime;
    private variable strDate;
    private variable strLabIDSource;
    private variable strPosIDSource;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_HandoverSequencesAndDataToSMT<<<<<<<<<<"));
    SeqRemoveAll(seq_Tips50);
    SeqRemoveAll(seq_Tips300);
    SeqRemoveAll(seq_Tips300MPH);
    SeqRemoveAll(seq_Tips300MPHShiftedTipPickupPosition);
    SeqRemoveAll(seq_Tips1000);
    SeqCopySequence(seq_Tips50, i_seqTip50Filter);
    SeqCopySequence(seq_Tips300, i_seqTip300Filter);
    SeqCopySequence(seq_Tips300MPH, i_seqTip300FilterMPH);
    SeqCopySequence(seq_Tips300MPHShiftedTipPickupPosition, i_seqTip300FilterMPHShiftedTipPickupPosition);
    SeqCopySequence(seq_Tips1000, i_seqTip1000Filter);
    SeqRemoveAll(seq_COREGripper);
    SeqCopySequence(seq_COREGripper, i_seqCOREGripper);
    _intStartPositionTip1000 = seq_Tips1000.GetCurrentPosition();
    _intStartPositionTip300 = seq_Tips300.GetCurrentPosition();
    _intStartPositionTip300MPH = seq_Tips300MPH.GetCurrentPosition();
    _intStartPositionTip50 = seq_Tips50.GetCurrentPosition();
    _strTipCounterNameTip50 = Translate("NGSStarTip_50F_Counter");
    _strTipCounterNameTip300 = Translate("NGSStarTip_SVF_Counter");
    _strTipCounterNameTip300MPH = Translate("NGSStarTip_SVFMPH_Counter");
    _strTipCounterNameTip1000 = Translate("NGSStarTip_HVF_Counter");
    _intConsumedTips50BeforeRelaodTips = 0;
    _intConsumedTips300BeforeRelaodTips = 0;
    _intConsumedTips300MPHBeforeRelaodTips = 0;
    _intConsumedTips1000BeforeRelaodTips = 0;
    _intConsumedTips50 = 0;
    _intConsumedTips300 = 0;
    _intConsumedTips300MPH = 0;
    _intConsumedTips1000 = 0;
    _intTotalConsumedTips50 = 0;
    _intTotalConsumedTips300 = 0;
    _intTotalConsumedTips300MPH = 0;
    _intTotalConsumedTips1000 = 0;
    _intTransportTool = i_intTransportTool;
    _blnSimulationModeON = i_blnSimulationON;
    _blnDeactivatePipettingStepsForTransportTests = i_blnDeactivatePipettingStepsForTransportTests;
    if( 0 == ProccessTimer.SetTimer(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    strCurrentDate = TimGetFormattedDate(Translate("%Y%m%d"));
    strCurrentTime = TimGetFormattedTime(Translate("%H%M%S"));
    _strFullPathReportFile = StrConcat12(Translate("C:\\Program Files (x86)\\HAMILTON\\LogFiles\\"), strCurrentDate, Translate("_"), strCurrentTime, Translate("_"), Translate("NGSStarReport"), Translate("_"), i_strKitName, Translate(".xls"), Translate(""), Translate(""), Translate(""));
    NGSStarReportFile.SetExtendedProperties( "HDR=NO");
    NGSStarReportFile.AddField("Date", strDate, hslString, 255);
    NGSStarReportFile.AddField("Time", strTime, hslString, 255);
    NGSStarReportFile.AddField("LabID Source", strLabIDSource, hslString, 255);
    NGSStarReportFile.AddField("PosID Source", strPosIDSource, hslString, 255);
    NGSStarReportFile.AddField("Transfer Volume", strTransferVolume, hslString, 255);
    NGSStarReportFile.AddField("LabID Target", strLabIDTarget, hslString, 255);
    NGSStarReportFile.AddField("PosID Target", strPosIDTarget, hslString, 255);
    if( 0 == NGSStarReportFile.Open(_strFullPathReportFile + " " + "RuntimeReport", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strFullPathReportFile, "HxMetEdCompCmd");
    }
    if( 0 != NGSStarReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NGSStarReportFile.RemoveFields();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_HandoverSequencesAndDataToSMT<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _Version(  ) void {
  }

  private function _DATA_PlausibilityCheckVolume( variable i_fltVolumeToBeChecked, variable i_intTipTypeToBeChecked ) void {
    private variable flt_volumeMax;
    private dialog customDialog_26;
    private variable strTipType;
    private variable retValueDialog;
    private dialog customDialog_27;
    private variable flt_volumeMin;
    MECC::TraceComment(Translate("\n>>>>>>>>>> Submethod:  _DATA_PlausibilityCheckVolume<<<<<<<<<<"));
    Trace ("Volume to be checked vs tiptype:  ", i_fltVolumeToBeChecked, " - current tiptype : ", i_intTipTypeToBeChecked);
    if (i_intTipTypeToBeChecked == 1)
    {
      flt_volumeMax = 300;
      flt_volumeMin = 10;
      strTipType = Translate("Standard Volume Filter Tip - SVFT - 300ul");
    }
    if (i_intTipTypeToBeChecked == 5)
    {
      flt_volumeMax = 1000;
      flt_volumeMin = 15;
      strTipType = Translate("High Volume Filter Tip - HVFT - 1000ul");
    }
    if (i_intTipTypeToBeChecked == 23)
    {
      flt_volumeMax = 50;
      flt_volumeMin = 1;
      strTipType = Translate("Low Volume Filter Tip - LVFT - 50ul");
    }
    if (i_fltVolumeToBeChecked <= flt_volumeMax)
    {
      if (i_fltVolumeToBeChecked < flt_volumeMin)
      {
        Trace ("Volume check failed.");
        customDialog_27.InitCustomDialog("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");
        customDialog_27.SetCustomDialogProperty( "textBox1.Text", i_fltVolumeToBeChecked );
        customDialog_27.SetCustomDialogProperty( "textBox2.Text", strTipType );
        customDialog_27.ShowCustomDialog();
        retValueDialog = customDialog_27.GetCustomDialogProperty( "ReturnValue" );
        if (retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
        }
        else
        {
          Trace ("Volume check failed - user decided to use a volume that is less then the recommended minimum for the tiptype used.");
        }
      }
      else
      {
        Trace ("Volume check passed.");
      }
    }
    else
    {
      Trace ("Volume check failed.");
      customDialog_26.InitCustomDialog("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");
      customDialog_26.SetCustomDialogProperty( "textBox1.Text", i_fltVolumeToBeChecked );
      customDialog_26.SetCustomDialogProperty( "textBox2.Text", strTipType );
      customDialog_26.ShowCustomDialog();
      retValueDialog = customDialog_26.GetCustomDialogProperty( "ReturnValue" );
      if (retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  _DATA_PlausibilityCheckVolume <<<<<<<<<<\n"));
  }

  function DATA_OverdryingProtection( timer & i_strOverdryingTimerName, variable i_intIncubationTimeForTheFollowingStep, variable i_blnStartNewTimer, variable & o_intIncubationTimeForTheFollowingStepModified ) void {
    private variable intElapsedTime;
    private variable intOriginalIncubationTimeForTheFollowingStep;
    o_intIncubationTimeForTheFollowingStepModified = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_OverdryingProtection<<<<<<<<<<"));
    if (i_blnStartNewTimer == ASWGLOBAL::BOOL::TRUE)
    {
      if( 0 == i_strOverdryingTimerName.SetTimer(hslInfinite) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      Trace ("Overdrying timer started:  ", i_strOverdryingTimerName);
    }
    else
    {
      intElapsedTime = i_strOverdryingTimerName.GetElapsedTime();
      intOriginalIncubationTimeForTheFollowingStep = i_intIncubationTimeForTheFollowingStep;
      o_intIncubationTimeForTheFollowingStepModified = i_intIncubationTimeForTheFollowingStep - intElapsedTime;
      Trace ("Read elapsed time of Overdrying Timer:  ",intElapsedTime, "seconds");
      Trace ("Original incubation time for the following incubation step:  ", intOriginalIncubationTimeForTheFollowingStep," seconds.");
      Trace ("Reduced incubation time for the following incubation step:  ", o_intIncubationTimeForTheFollowingStepModified," seconds.");
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_OverdryingProtection<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_ReagentsFromTubeOrTroughOrPlateToPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_blnTipExchangeDuringTransfer, variable i_intMixCycles, variable i_fltVolumeMix, variable i_fltDispenseHeightFromBottom, variable i_fltAspirateHeightFromBottom, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable strCurrentDispenseMode;
    private variable strTypeOfLabware;
    private variable intNumberOfSamples;
    private variable loopCounter1;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable strLabwareIDAspiration;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private variable strGetPositionIDOfAspirationSequence;
    private variable intNumberOfLoopsAfterCeiling;
    private variable intGetTotalSequenceAspiration;
    private variable strGetLabwareIDOfAspirationSequence;
    private variable fltNumberOfLoops;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable intGetTotalSequenceDispense;
    private sequence seqAdoptedAspirationPosition;
    private variable blnStringDispenseModeSurfaceEmpty;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_ReagentsFromTubeOrTroughOrPlateToPlate <<<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("PIP_ReagentsFromTubeOrTroughOrPlateToPlate"), i_blnUpdateInformationIntoReporFile);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
      blnStringDispenseModeSurfaceEmpty = StrFind(i_strLiquidClassNameTransfer, Translate("SurfaceEmpty"));
      if (blnStringDispenseModeSurfaceEmpty == -1)
      {
        blnStringDispenseModeSurfaceEmpty = ASWGLOBAL::BOOL::FALSE;
      }
      else
      {
        blnStringDispenseModeSurfaceEmpty = ASWGLOBAL::BOOL::TRUE;
      }
      _DATA_PlausibilityCheckVolume(i_fltVolume, intCurrentTipType);
      strLabwareIDAspiration = SeqGetLabwareId(i_seqAspirationPosition);
      _DATA_InterpreteLabwareID(strLabwareIDAspiration, strTypeOfLabware);
      intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (intCurrentDispenseMode == 2)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (intCurrentDispenseMode == 4)
        {
          strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (strCurrentDispenseMode == "Empty")
      {
        if (strTypeOfLabware == "tube")
        {
          SeqRemoveAll(seqAdoptedAspirationPosition);
          intGetTotalSequenceAspiration = SeqGetTotal(i_seqAspirationPosition);
          intGetTotalSequenceDispense = SeqGetTotal(i_seqDispensePosition);
          fltNumberOfLoops = intGetTotalSequenceDispense / (intGetTotalSequenceAspiration * 1.0);
          intNumberOfLoopsAfterCeiling = MthCeiling(fltNumberOfLoops);
          {
            for(loopCounter3 = 0; loopCounter3 < intNumberOfLoopsAfterCeiling;)
            {
              loopCounter3 = loopCounter3 + 1;
              {
                loopCounter4 = 0;
                while (
                   (i_seqAspirationPosition.GetCurrentPosition() > 0)
                )
                {
                  AlignSequences(hslTrue, i_seqAspirationPosition, 1);
                  loopCounter4 = loopCounter4 + 1;
                  strGetLabwareIDOfAspirationSequence = SeqGetLabwareId(i_seqAspirationPosition);
                  strGetPositionIDOfAspirationSequence = SeqGetPositionId(i_seqAspirationPosition);
                  SeqIncrement(i_seqAspirationPosition, 1);
                  SeqAdd(seqAdoptedAspirationPosition, strGetLabwareIDOfAspirationSequence, strGetPositionIDOfAspirationSequence);
                  if (
                     (i_seqAspirationPosition.GetCurrentPosition() > 0 && i_seqAspirationPosition.GetMax() == 0 )
                  )
                  { MECC::EndlessSequenceLoopWarning(GetFileName()); }
                }
                i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
                i_seqAspirationPosition.SetCurrentPosition(1);
              }
            }
          }
          SeqResetSequenceIndexes(seqAdoptedAspirationPosition);
          SeqCopySequence(i_seqAspirationPosition, seqAdoptedAspirationPosition);
        }
        if (strTypeOfLabware == "plate")
        {
          SeqRemoveAll(seqAdoptedAspirationPosition);
          intGetTotalSequenceAspiration = SeqGetTotal(i_seqAspirationPosition);
          intGetTotalSequenceDispense = SeqGetTotal(i_seqDispensePosition);
          fltNumberOfLoops = intGetTotalSequenceDispense / (intGetTotalSequenceAspiration * 1.0);
          intNumberOfLoopsAfterCeiling = MthCeiling(fltNumberOfLoops);
          {
            for(loopCounter3 = 0; loopCounter3 < intNumberOfLoopsAfterCeiling;)
            {
              loopCounter3 = loopCounter3 + 1;
              {
                loopCounter4 = 0;
                while (
                   (i_seqAspirationPosition.GetCurrentPosition() > 0)
                )
                {
                  AlignSequences(hslTrue, i_seqAspirationPosition, 1);
                  loopCounter4 = loopCounter4 + 1;
                  strGetLabwareIDOfAspirationSequence = SeqGetLabwareId(i_seqAspirationPosition);
                  strGetPositionIDOfAspirationSequence = SeqGetPositionId(i_seqAspirationPosition);
                  SeqIncrement(i_seqAspirationPosition, 1);
                  SeqAdd(seqAdoptedAspirationPosition, strGetLabwareIDOfAspirationSequence, strGetPositionIDOfAspirationSequence);
                  if (
                     (i_seqAspirationPosition.GetCurrentPosition() > 0 && i_seqAspirationPosition.GetMax() == 0 )
                  )
                  { MECC::EndlessSequenceLoopWarning(GetFileName()); }
                }
                i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
                i_seqAspirationPosition.SetCurrentPosition(1);
              }
            }
          }
          SeqResetSequenceIndexes(seqAdoptedAspirationPosition);
          SeqCopySequence(i_seqAspirationPosition, seqAdoptedAspirationPosition);
        }
        if (strTypeOfLabware == "trough")
        {
        }
        MECC::TraceComment(Translate("********** Now pipetting reagents to destination plate"));
        if (intCurrentTipType == 1)
        {
          {
            loopCounter1 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips300, 1, i_seqDispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              if (i_fltAspirateHeightFromBottom != 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              if (i_fltDispenseHeightFromBottom == 0)
              {
                if (blnStringDispenseModeSurfaceEmpty == ASWGLOBAL::BOOL::TRUE)
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	strStepReturnValueDispense = arrRetValues[2];
                  }
                }
                else
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	strStepReturnValueDispense = arrRetValues[2];
                  }
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            seq_Tips300.SetMax(seq_Tips300.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (intCurrentTipType == 5)
        {
          {
            loopCounter1 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips1000, 1, i_seqDispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              if (i_fltAspirateHeightFromBottom != 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              if (i_fltDispenseHeightFromBottom == 0)
              {
                if (blnStringDispenseModeSurfaceEmpty == ASWGLOBAL::BOOL::TRUE)
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	strStepReturnValueDispense = arrRetValues[2];
                  }
                }
                else
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	strStepReturnValueDispense = arrRetValues[2];
                  }
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            seq_Tips1000.SetMax(seq_Tips1000.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (intCurrentTipType == 23)
        {
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
          {
            loopCounter1 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips50, 1, i_seqDispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              if (i_fltAspirateHeightFromBottom != 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              if (i_fltDispenseHeightFromBottom == 0)
              {
                if (blnStringDispenseModeSurfaceEmpty == ASWGLOBAL::BOOL::TRUE)
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	strStepReturnValueDispense = arrRetValues[2];
                  }
                }
                else
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	strStepReturnValueDispense = arrRetValues[2];
                  }
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            seq_Tips50.SetMax(seq_Tips50.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        if (intCurrentTipType == 23)
        {
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
        }
      }
      if (strCurrentDispenseMode == "Part")
      {
        if (intCurrentTipType == 1)
        {
          _PIP_SVFTMultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPosition, i_seqDispensePosition, i_fltVolume, i_strLiquidClassNameTransfer, i_fltDispenseHeightFromBottom, i_blnUpdateInformationIntoReporFile);
        }
        else
        {
          _PIP_HVFTMultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPosition, i_seqDispensePosition, i_fltVolume, i_strLiquidClassNameTransfer, i_blnUpdateInformationIntoReporFile);
        }
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, i_seqAspirationPosition);
      {
        variable _FilterIdsArray_28[];
        variable _ColumnIdsArray_28[];
        variable _ColumnNamesArray_28[];
        variable _ExperimentsArray_28[];
        _FilterIdsArray_28.SetSize(0);
        _ColumnNamesArray_28.SetSize(14);
        _ColumnIdsArray_28.SetSize(14);
        _ColumnNamesArray_28.SetAt(0, "RecordId");
        _ColumnIdsArray_28.SetAt(0, 0);
        _ColumnNamesArray_28.SetAt(1, "TRackBC");
        _ColumnIdsArray_28.SetAt(1, 1);
        _ColumnNamesArray_28.SetAt(2, "TLabwareId");
        _ColumnIdsArray_28.SetAt(2, 2);
        _ColumnNamesArray_28.SetAt(3, "TPositionId");
        _ColumnIdsArray_28.SetAt(3, 3);
        _ColumnNamesArray_28.SetAt(4, "TPositionBC");
        _ColumnIdsArray_28.SetAt(4, 4);
        _ColumnNamesArray_28.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_28.SetAt(5, 5);
        _ColumnNamesArray_28.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_28.SetAt(6, 6);
        _ColumnNamesArray_28.SetAt(7, "TVolume");
        _ColumnIdsArray_28.SetAt(7, 7);
        _ColumnNamesArray_28.SetAt(8, "SRackBC");
        _ColumnIdsArray_28.SetAt(8, 8);
        _ColumnNamesArray_28.SetAt(9, "SLabwareId");
        _ColumnIdsArray_28.SetAt(9, 9);
        _ColumnNamesArray_28.SetAt(10, "SPositionId");
        _ColumnIdsArray_28.SetAt(10, 10);
        _ColumnNamesArray_28.SetAt(11, "SPositionBC");
        _ColumnIdsArray_28.SetAt(11, 11);
        _ColumnNamesArray_28.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_28.SetAt(12, 12);
        _ColumnNamesArray_28.SetAt(13, "UserName");
        _ColumnIdsArray_28.SetAt(13, 13);
        _ExperimentsArray_28.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqDispensePosition, 3, _FilterIdsArray_28, 0, _ColumnIdsArray_28, _ColumnNamesArray_28, _ExperimentsArray_28, "Reagents_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_ReagentsFromTubeOrTroughOrPlateToPlate<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_Liquid_SingleDispenseFromPlateToPlate( device & ML_STAR, sequence & i_seq_AspirationPosition, sequence & i_seq_DispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMix, variable i_fltAspirationFixHeight, variable i_fltDispenseFixHeight, variable i_blnTouchOffOnAspirate, variable i_blnLiquidFollowingOnDispense, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable strCurrentDispenseMode;
    private variable intCurrentDispenseMode;
    private variable loopCounter1;
    private variable intCurrentTipType;
    private variable retValueDialog;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private dialog customDialog_29;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_Liquid_SingleDispenseFromPlateToPlate <<<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("PIP_Liquid_SingleDispenseFromPlateToPlate"), i_blnUpdateInformationIntoReporFile);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
      _DATA_PlausibilityCheckVolume(i_fltVolume, intCurrentTipType);
      if (intCurrentDispenseMode == 2)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (intCurrentDispenseMode == 4)
        {
          strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (strCurrentDispenseMode == "Empty")
      {
        if (intCurrentTipType == 1)
        {
          HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
          {
            loopCounter1 = 0;
            while (
               (i_seq_AspirationPosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seq_AspirationPosition, 1, seq_Tips300, 1, i_seq_DispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (i_fltAspirationFixHeight == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                if (i_blnTouchOffOnAspirate == ASWGLOBAL::BOOL::TRUE)
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    	strStepReturnValueAspiration = arrRetValues[2];
                  }
                }
                else
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    	strStepReturnValueAspiration = arrRetValues[2];
                  }
                }
              }
              if (i_fltDispenseFixHeight == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
              }
              else
              {
                if (i_blnLiquidFollowingOnDispense == ASWGLOBAL::BOOL::TRUE)
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	strStepReturnValueDispense = arrRetValues[2];
                  }
                }
                else
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	strStepReturnValueDispense = arrRetValues[2];
                  }
                }
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seq_AspirationPosition.GetCurrentPosition() > 0 && i_seq_AspirationPosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seq_AspirationPosition.SetMax(i_seq_AspirationPosition.GetTotal());
            seq_Tips300.SetMax(seq_Tips300.GetTotal());
            i_seq_DispensePosition.SetMax(i_seq_DispensePosition.GetTotal());
            i_seq_AspirationPosition.SetCurrentPosition(1);
            i_seq_DispensePosition.SetCurrentPosition(1);
          }
          HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
        }
        if (intCurrentTipType == 5)
        {
          HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
          {
            loopCounter1 = 0;
            while (
               (i_seq_AspirationPosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seq_AspirationPosition, 1, seq_Tips1000, 1, i_seq_DispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (i_fltAspirationFixHeight == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                if (i_blnTouchOffOnAspirate == ASWGLOBAL::BOOL::TRUE)
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    	strStepReturnValueAspiration = arrRetValues[2];
                  }
                }
                else
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    	strStepReturnValueAspiration = arrRetValues[2];
                  }
                }
              }
              if (i_fltDispenseFixHeight == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
              }
              else
              {
                if (i_blnLiquidFollowingOnDispense == ASWGLOBAL::BOOL::TRUE)
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	strStepReturnValueDispense = arrRetValues[2];
                  }
                }
                else
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	strStepReturnValueDispense = arrRetValues[2];
                  }
                }
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seq_AspirationPosition.GetCurrentPosition() > 0 && i_seq_AspirationPosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seq_AspirationPosition.SetMax(i_seq_AspirationPosition.GetTotal());
            seq_Tips1000.SetMax(seq_Tips1000.GetTotal());
            i_seq_DispensePosition.SetMax(i_seq_DispensePosition.GetTotal());
            i_seq_AspirationPosition.SetCurrentPosition(1);
            i_seq_DispensePosition.SetCurrentPosition(1);
          }
          HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
        }
        if (intCurrentTipType == 23)
        {
          HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
          {
            loopCounter1 = 0;
            while (
               (i_seq_AspirationPosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seq_AspirationPosition, 1, seq_Tips50, 1, i_seq_DispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (i_fltAspirationFixHeight == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                if (i_blnTouchOffOnAspirate == ASWGLOBAL::BOOL::TRUE)
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    	strStepReturnValueAspiration = arrRetValues[2];
                  }
                }
                else
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    	strStepReturnValueAspiration = arrRetValues[2];
                  }
                }
              }
              if (i_fltDispenseFixHeight == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	strStepReturnValueDispense = arrRetValues[2];
                }
              }
              else
              {
                if (i_blnLiquidFollowingOnDispense == ASWGLOBAL::BOOL::TRUE)
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	strStepReturnValueDispense = arrRetValues[2];
                  }
                }
                else
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	strStepReturnValueDispense = arrRetValues[2];
                  }
                }
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seq_AspirationPosition.GetCurrentPosition() > 0 && i_seq_AspirationPosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seq_AspirationPosition.SetMax(i_seq_AspirationPosition.GetTotal());
            seq_Tips50.SetMax(seq_Tips50.GetTotal());
            i_seq_DispensePosition.SetMax(i_seq_DispensePosition.GetTotal());
            i_seq_AspirationPosition.SetCurrentPosition(1);
            i_seq_DispensePosition.SetCurrentPosition(1);
          }
          HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        customDialog_29.InitCustomDialog("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");
        customDialog_29.ShowCustomDialog();
        retValueDialog = customDialog_29.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, i_seq_AspirationPosition);
      {
        variable _FilterIdsArray_30[];
        variable _ColumnIdsArray_30[];
        variable _ColumnNamesArray_30[];
        variable _ExperimentsArray_30[];
        _FilterIdsArray_30.SetSize(0);
        _ColumnNamesArray_30.SetSize(14);
        _ColumnIdsArray_30.SetSize(14);
        _ColumnNamesArray_30.SetAt(0, "RecordId");
        _ColumnIdsArray_30.SetAt(0, 0);
        _ColumnNamesArray_30.SetAt(1, "TRackBC");
        _ColumnIdsArray_30.SetAt(1, 1);
        _ColumnNamesArray_30.SetAt(2, "TLabwareId");
        _ColumnIdsArray_30.SetAt(2, 2);
        _ColumnNamesArray_30.SetAt(3, "TPositionId");
        _ColumnIdsArray_30.SetAt(3, 3);
        _ColumnNamesArray_30.SetAt(4, "TPositionBC");
        _ColumnIdsArray_30.SetAt(4, 4);
        _ColumnNamesArray_30.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_30.SetAt(5, 5);
        _ColumnNamesArray_30.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_30.SetAt(6, 6);
        _ColumnNamesArray_30.SetAt(7, "TVolume");
        _ColumnIdsArray_30.SetAt(7, 7);
        _ColumnNamesArray_30.SetAt(8, "SRackBC");
        _ColumnIdsArray_30.SetAt(8, 8);
        _ColumnNamesArray_30.SetAt(9, "SLabwareId");
        _ColumnIdsArray_30.SetAt(9, 9);
        _ColumnNamesArray_30.SetAt(10, "SPositionId");
        _ColumnIdsArray_30.SetAt(10, 10);
        _ColumnNamesArray_30.SetAt(11, "SPositionBC");
        _ColumnIdsArray_30.SetAt(11, 11);
        _ColumnNamesArray_30.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_30.SetAt(12, 12);
        _ColumnNamesArray_30.SetAt(13, "UserName");
        _ColumnIdsArray_30.SetAt(13, 13);
        _ExperimentsArray_30.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seq_DispensePosition, 3, _FilterIdsArray_30, 0, _ColumnIdsArray_30, _ColumnNamesArray_30, _ExperimentsArray_30, "PlateLiquidToPlate.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_Liquid_SingleDispenseFromPlateToPlate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_IncubationTimer( timer & i_strIncubationTimerName, variable i_intTime ) void {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_IncubationTimer<<<<<<<<<<"));
    if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      Trace ("Timer name : ", i_strIncubationTimerName);
      Trace ("Time to be perfomed:  ", i_intTime);
      if( 0 == i_strIncubationTimerName.SetTimer(i_intTime) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == i_strIncubationTimerName.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    else
    {
      Trace ("Simulation Mode - skip timer : ", i_strIncubationTimerName);
      Trace ("Time to be perfomed:  ", i_intTime);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_IncubationTimer<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_CheckPlatesInStacks( device & ML_STAR, sequence & i_seqStack1, sequence & i_seqStack2, sequence & i_seqStack3, sequence & i_seqStack4, variable i_intStack1ExpectedNumberOfPlates, variable i_intStack2ExpectedNumberOfPlates, variable i_intStack3ExpectedNumberOfPlates, variable i_intStack4ExpectedNumberOfPlates, variable & o_intResultCheckOfFalseLoading, variable & o_strMessageResult ) void {
    private variable strCurrentLabID;
    private variable intMaxNumberOfPlatesWithinCurrentStack;
    private variable loopCounter1;
    private variable strPlateNumber_TopStack1;
    private variable strPlateNumber_TopStack2;
    private variable strPlateNumber_TopStack3;
    private variable strPlateNumber_TopStack4;
    private variable intPlateNumber_TopStack1;
    private variable intPlateNumber_TopStack2;
    private variable intPlateNumber_TopStack3;
    private variable intPlateNumber_TopStack4;
    o_intResultCheckOfFalseLoading = 0;
    o_strMessageResult = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Start Submethod : DATA_CheckPlatesInStacks<<<<<<<<<<"));
    o_strMessageResult = Translate("Results of Checking Plates in Stacks:\n");
    o_intResultCheckOfFalseLoading = 0;
    strPlateNumber_TopStack1 = Translate("");
    strPlateNumber_TopStack2 = Translate("");
    strPlateNumber_TopStack3 = Translate("");
    strPlateNumber_TopStack4 = Translate("");
    if (i_intStack1ExpectedNumberOfPlates > 0)
    {
      TrcTraceSequence(i_seqStack1);
      if (_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
      {
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
        intPlateNumber_TopStack1 = i_intStack1ExpectedNumberOfPlates;
        strPlateNumber_TopStack1 = Translate("1");
      }
      else
      {
        if (_intTransportTool == 2)
        {
          intMaxNumberOfPlatesWithinCurrentStack = SeqGetMax(i_seqStack1);
          {
            for(loopCounter1 = 0; loopCounter1 < intMaxNumberOfPlatesWithinCurrentStack;)
            {
              loopCounter1 = loopCounter1 + 1;
              onerror goto errLabel_31 ;
              err.Clear();
              {
                	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
              }
              strCurrentLabID = SeqGetLabwareId(i_seqStack1);
              strPlateNumber_TopStack1 = StrRight(strCurrentLabID, 1);
              intPlateNumber_TopStack1 = StrIVal(strPlateNumber_TopStack1);
              break;
              errLabel_31 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                SeqIncrement(i_seqStack1, 1);
              }   /* end if from skip handler if no error */
            }
          }
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._8E745E0A_158E_425e_BD3E_2F894E354A40("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"); // GetFirstPlatePosition
            	strPlateNumber_TopStack1 = arrRetValues[3];
          }
          strPlateNumber_TopStack1 = StrRight(strPlateNumber_TopStack1, 1);
          intPlateNumber_TopStack1 = StrIVal(strPlateNumber_TopStack1);
        }
        if (strPlateNumber_TopStack1 == "")
        {
          intPlateNumber_TopStack1 = 0;
        }
      }
      Trace ("The number of plates found in Stack 1:  ", intPlateNumber_TopStack1);
      Trace ("Expected number of plates for Stack 1:  ", i_intStack1ExpectedNumberOfPlates);
      if (intPlateNumber_TopStack1 == i_intStack1ExpectedNumberOfPlates)
      {
        o_strMessageResult = o_strMessageResult + Translate("\nThe correct number of plates are in Stack1.");
      }
      else
      {
        o_strMessageResult = o_strMessageResult + Translate("\nWARNING:  Wrong number of plates is in Stack1.  Expected:  ");
        o_strMessageResult = StrConcat2(o_strMessageResult, i_intStack1ExpectedNumberOfPlates);
        o_strMessageResult = o_strMessageResult + Translate(" Found:  ");
        o_strMessageResult = StrConcat2(o_strMessageResult, intPlateNumber_TopStack1);
        o_intResultCheckOfFalseLoading = 1;
        SeqResetSequenceIndexes(i_seqStack1);
      }
    }
    if (i_intStack2ExpectedNumberOfPlates > 0)
    {
      TrcTraceSequence(i_seqStack2);
      if (_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
      {
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
        intPlateNumber_TopStack2 = i_intStack2ExpectedNumberOfPlates;
        strPlateNumber_TopStack2 = Translate("1");
      }
      else
      {
        if (_intTransportTool == 2)
        {
          intMaxNumberOfPlatesWithinCurrentStack = SeqGetMax(i_seqStack2);
          {
            for(loopCounter1 = 0; loopCounter1 < intMaxNumberOfPlatesWithinCurrentStack;)
            {
              loopCounter1 = loopCounter1 + 1;
              onerror goto errLabel_32 ;
              err.Clear();
              {
                	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
              }
              strCurrentLabID = SeqGetLabwareId(i_seqStack2);
              strPlateNumber_TopStack2 = StrRight(strCurrentLabID, 1);
              intPlateNumber_TopStack2 = StrIVal(strPlateNumber_TopStack2);
              break;
              errLabel_32 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                SeqIncrement(i_seqStack2, 1);
              }   /* end if from skip handler if no error */
            }
          }
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._8E745E0A_158E_425e_BD3E_2F894E354A40("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"); // GetFirstPlatePosition
            	strPlateNumber_TopStack2 = arrRetValues[3];
          }
          strPlateNumber_TopStack2 = StrRight(strPlateNumber_TopStack2, 1);
          intPlateNumber_TopStack2 = StrIVal(strPlateNumber_TopStack2);
        }
        if (strPlateNumber_TopStack2 == "")
        {
          intPlateNumber_TopStack2 = 0;
        }
      }
      Trace ("The number of plates found in Stack 2:  ", intPlateNumber_TopStack2);
      Trace ("Expected number of plates for Stack 2:  ", i_intStack2ExpectedNumberOfPlates);
      if (intPlateNumber_TopStack2 == i_intStack2ExpectedNumberOfPlates)
      {
        o_strMessageResult = o_strMessageResult + Translate("\nThe correct number of plates are in Stack2.");
      }
      else
      {
        o_strMessageResult = o_strMessageResult + Translate("\nWARNING:  Wrong number of plates is in Stack2.  Expected:  ");
        o_strMessageResult = StrConcat2(o_strMessageResult, i_intStack2ExpectedNumberOfPlates);
        o_strMessageResult = o_strMessageResult + Translate(" Found:  ");
        o_strMessageResult = StrConcat2(o_strMessageResult, intPlateNumber_TopStack2);
        o_intResultCheckOfFalseLoading = 1;
        SeqResetSequenceIndexes(i_seqStack2);
      }
    }
    if (i_intStack3ExpectedNumberOfPlates > 0)
    {
      TrcTraceSequence(i_seqStack3);
      if (_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
      {
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
        intPlateNumber_TopStack3 = i_intStack3ExpectedNumberOfPlates;
        strPlateNumber_TopStack3 = Translate("1");
      }
      else
      {
        if (_intTransportTool == 2)
        {
          intMaxNumberOfPlatesWithinCurrentStack = SeqGetMax(i_seqStack3);
          {
            for(loopCounter1 = 0; loopCounter1 < intMaxNumberOfPlatesWithinCurrentStack;)
            {
              loopCounter1 = loopCounter1 + 1;
              onerror goto errLabel_33 ;
              err.Clear();
              {
                	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
              }
              strCurrentLabID = SeqGetLabwareId(i_seqStack3);
              strPlateNumber_TopStack3 = StrRight(strCurrentLabID, 1);
              intPlateNumber_TopStack3 = StrIVal(strPlateNumber_TopStack3);
              break;
              errLabel_33 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                SeqIncrement(i_seqStack3, 1);
              }   /* end if from skip handler if no error */
            }
          }
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._8E745E0A_158E_425e_BD3E_2F894E354A40("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"); // GetFirstPlatePosition
            	strPlateNumber_TopStack3 = arrRetValues[3];
          }
          strPlateNumber_TopStack3 = StrRight(strPlateNumber_TopStack3, 1);
          intPlateNumber_TopStack3 = StrIVal(strPlateNumber_TopStack3);
        }
        if (strPlateNumber_TopStack3 == "")
        {
          intPlateNumber_TopStack3 = 0;
        }
      }
      Trace ("The number of plates found in Stack 3:  ", intPlateNumber_TopStack3);
      Trace ("Expected number of plates for Stack 3:  ", i_intStack3ExpectedNumberOfPlates);
      if (intPlateNumber_TopStack3 == i_intStack3ExpectedNumberOfPlates)
      {
        o_strMessageResult = o_strMessageResult + Translate("\nThe correct number of plates are in Stack3.");
      }
      else
      {
        o_strMessageResult = o_strMessageResult + Translate("\nWARNING:  Wrong number of plates is in Stack3.  Expected:  ");
        o_strMessageResult = StrConcat2(o_strMessageResult, i_intStack3ExpectedNumberOfPlates);
        o_strMessageResult = o_strMessageResult + Translate(" Found:  ");
        o_strMessageResult = StrConcat2(o_strMessageResult, intPlateNumber_TopStack3);
        o_intResultCheckOfFalseLoading = 1;
        SeqResetSequenceIndexes(i_seqStack3);
      }
    }
    if (i_intStack4ExpectedNumberOfPlates > 0)
    {
      TrcTraceSequence(i_seqStack4);
      if (_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
      {
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
        intPlateNumber_TopStack4 = i_intStack4ExpectedNumberOfPlates;
        strPlateNumber_TopStack4 = Translate("1");
      }
      else
      {
        if (_intTransportTool == 2)
        {
          intMaxNumberOfPlatesWithinCurrentStack = SeqGetMax(i_seqStack4);
          {
            for(loopCounter1 = 0; loopCounter1 < intMaxNumberOfPlatesWithinCurrentStack;)
            {
              loopCounter1 = loopCounter1 + 1;
              onerror goto errLabel_34 ;
              err.Clear();
              {
                	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
              }
              strCurrentLabID = SeqGetLabwareId(i_seqStack4);
              strPlateNumber_TopStack4 = StrRight(strCurrentLabID, 1);
              intPlateNumber_TopStack4 = StrIVal(strPlateNumber_TopStack4);
              break;
              errLabel_34 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                SeqIncrement(i_seqStack4, 1);
              }   /* end if from skip handler if no error */
            }
          }
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._8E745E0A_158E_425e_BD3E_2F894E354A40("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"); // GetFirstPlatePosition
            	strPlateNumber_TopStack4 = arrRetValues[3];
          }
          strPlateNumber_TopStack4 = StrRight(strPlateNumber_TopStack4, 1);
          intPlateNumber_TopStack4 = StrIVal(strPlateNumber_TopStack4);
        }
        if (strPlateNumber_TopStack4 == "")
        {
          intPlateNumber_TopStack4 = 0;
        }
      }
      Trace ("The number of plates found in Stack 4:  ", intPlateNumber_TopStack4);
      Trace ("Expected number of plates for Stack 4:  ", i_intStack4ExpectedNumberOfPlates);
      if (intPlateNumber_TopStack4 == i_intStack4ExpectedNumberOfPlates)
      {
        o_strMessageResult = o_strMessageResult + Translate("\nThe correct number of plates are in Stack4.");
      }
      else
      {
        o_strMessageResult = o_strMessageResult + Translate("\nWARNING:  Wrong number of plates is in Stack4.  Expected:  ");
        o_strMessageResult = StrConcat2(o_strMessageResult, i_intStack4ExpectedNumberOfPlates);
        o_intResultCheckOfFalseLoading = 1;
        o_strMessageResult = o_strMessageResult + Translate(" Found:  ");
        o_strMessageResult = StrConcat2(o_strMessageResult, intPlateNumber_TopStack4);
        SeqResetSequenceIndexes(i_seqStack4);
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate(">>>>>>>>>>Submethod Complete : DATA_CheckPlatesInStacks<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_TipCounterWrite( device & ML_STAR ) void {
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  DATA_TipCounterWrite<<<<<<<<<<"));
    TipCount::Write2(seq_Tips50, _strTipCounterNameTip50, ML_STAR);
    TipCount::Write2(seq_Tips300, _strTipCounterNameTip300, ML_STAR);
    TipCount::Write2(seq_Tips300MPH, _strTipCounterNameTip300MPH, ML_STAR);
    TipCount::Write2(seq_Tips1000, _strTipCounterNameTip1000, ML_STAR);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_TipCounterWrite <<<<<<<<<<\n"));
  }

  private function _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport( variable i_strStepReturnValueAspiration, variable i_strStepReturnValueDispense ) void {
    private variable intNumberOfPositions;
    private variable intIndexNumberOfPositions;
    private variable intGetPositionFromNum;
    private variable strGetStepData;
    private variable strCurrentTime;
    private variable strCurrentDate;
    private variable strCurrentLabIDSource;
    private variable strCurrentPosIDSource;
    private variable strCurrentPosIDTarget;
    private variable strCurrentLabIDTarget;
    private file NGSStarReportFile2;
    if(0){
      Trace ("StepReturnValue Aspiration to be analyzed :  ", i_strStepReturnValueAspiration);
      Trace ("StepReturnValue Dispense to be analyzed :  ", i_strStepReturnValueDispense);
    }
    strCurrentDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    if(0){
      Trace ("Update Current Date                :  ", strCurrentDate);
      Trace ("Update Current Time                :  ", strCurrentTime);
    }
    intNumberOfPositions = StepReturn::GetNumberOfPositions(i_strStepReturnValueAspiration);
    NGSStarReportFile2.AddField("Date", strCurrentDate, hslString, 255);
    NGSStarReportFile2.AddField("Time", strCurrentTime, hslString, 255);
    NGSStarReportFile2.AddField("LabID Source", strCurrentLabIDSource, hslString, 255);
    NGSStarReportFile2.AddField("PosID Source", strCurrentPosIDSource, hslString, 255);
    NGSStarReportFile2.AddField("Transfer Volume", strGetStepData, hslString, 255);
    NGSStarReportFile2.AddField("LabID Target", strCurrentLabIDTarget, hslString, 255);
    NGSStarReportFile2.AddField("PosID Target", strCurrentPosIDTarget, hslString, 255);
    if( 0 == NGSStarReportFile2.Open(_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strFullPathReportFile, "HxMetEdCompCmd");
    }
    {
      for(intIndexNumberOfPositions = 0; intIndexNumberOfPositions < intNumberOfPositions;)
      {
        intIndexNumberOfPositions = intIndexNumberOfPositions + 1;
        intGetPositionFromNum = StepReturn::GetPositionFromNum(intIndexNumberOfPositions, i_strStepReturnValueAspiration);
        strCurrentLabIDSource = StepReturn::GetLabwareId(intGetPositionFromNum, i_strStepReturnValueAspiration);
        strCurrentPosIDSource = StepReturn::GetPositionId(intGetPositionFromNum, i_strStepReturnValueAspiration);
        strGetStepData = StepReturn::GetStepData(intIndexNumberOfPositions, i_strStepReturnValueAspiration);
        if (strGetStepData != "")
        {
          if(0){
            Trace ("Update Current LabID Source        :  ", strCurrentLabIDSource);
            Trace ("Update Current PosID Source        :  ", strCurrentPosIDSource);
          }
        }
        intGetPositionFromNum = StepReturn::GetPositionFromNum(intIndexNumberOfPositions, i_strStepReturnValueDispense);
        strCurrentLabIDTarget = StepReturn::GetLabwareId(intGetPositionFromNum, i_strStepReturnValueDispense);
        strCurrentPosIDTarget = StepReturn::GetPositionId(intGetPositionFromNum, i_strStepReturnValueDispense);
        strGetStepData = StepReturn::GetStepData(intIndexNumberOfPositions, i_strStepReturnValueDispense);
        if (strGetStepData != "")
        {
          if(0){
            Trace ("Update Current Transfer Volume     :  ", strGetStepData);
            Trace ("Update Current LabID Target        :  ", strCurrentLabIDTarget);
            Trace ("Update Current PosID Target        :  ", strCurrentPosIDTarget);
          }
          if( 0 == NGSStarReportFile2.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
    }
    if( 0 != NGSStarReportFile2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NGSStarReportFile2.RemoveFields();
  }

  private function _PIP_SVFTMultidispenseFromTroughToPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_fltDispenseHeightFromBottom, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable strCurrentDispenseMode;
    private variable intMaximalDispensesPerAspiration;
    private variable strTypeOfLabware;
    private variable intMaximalDispensesPer2Aspirations;
    private variable intMaximalDispensesPer3Aspirations;
    private variable intLabwareTypeIsABeadsTrough;
    private variable intMixCycles;
    private variable intNumberOfSamples;
    private variable strLabwareIDAspiration;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable loopCounter2;
    private variable fltMaximalDispensesPerAspiration;
    private variable loopCounter3;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private variable retValueDialog;
    private variable fltAspirationVolume;
    private variable fltAspirationVolume_Loop1;
    private variable fltAspirationVolume_Loop2;
    private variable fltAspirationVolume_Loop3;
    private variable fltAspirationVolume_Loop4;
    private variable fltMixVolume;
    private variable intNumberOfAliquotsPerAsp1;
    private variable intNumberOfAliquotsPerAsp2;
    private variable intNumberOfAliquotsPerAsp3;
    private variable intNumberOfAliquotsPerAsp4;
    private variable intNumberOfAspirations;
    private variable intNumberOfColumns;
    private variable intNumberOfDispenses;
    private variable intNumberOfDispenses1;
    private variable intNumberOfDispenses2;
    private variable intNumberOfDispenses3;
    private variable intNumberOfDispenses4;
    private variable intNumberOfRemainingWells;
    private dialog customDialog_35;
    MECC::TraceComment(Translate("ииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииии\n>>>>>>>>>> Submethod:  _PIP_SVFTMultidispenseFromTroughToPlate<<<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate(" _PIP_SVFTMultidispenseFromTroughToPlate"), i_blnUpdateInformationIntoReporFile);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
      strLabwareIDAspiration = SeqGetLabwareId(i_seqAspirationPosition);
      intLabwareTypeIsABeadsTrough = StrFind(strLabwareIDAspiration, Translate("Beads"));
      if (intLabwareTypeIsABeadsTrough > 0)
      {
        MECC::TraceComment(Translate("Reagent trough  contains beads --> mix cycles = 6 during aspiration"));
        intMixCycles = 6;
      }
      else
      {
        strLabwareIDAspiration = SeqGetName(i_seqAspirationPosition);
        intLabwareTypeIsABeadsTrough = StrFind(strLabwareIDAspiration, Translate("Beads"));
        if (intLabwareTypeIsABeadsTrough > 0)
        {
          MECC::TraceComment(Translate("Reagent trough  contains beads --> mix cycles = 6 during aspiration"));
          intMixCycles = 6;
        }
        else
        {
          intMixCycles = 0;
        }
      }
      Trace ("mix cycles during aspiration:  ", intMixCycles);
      _DATA_InterpreteLabwareID(strLabwareIDAspiration, strTypeOfLabware);
      intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (intCurrentDispenseMode == 2)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (intCurrentDispenseMode == 4)
        {
          strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          strCurrentDispenseMode = Translate("Empty");
        }
      }
      Trace ("Current dispense mode:  ", strCurrentDispenseMode);
      if (strCurrentDispenseMode == "Part")
      {
        if (intCurrentTipType == 1)
        {
          Trace ("Volume per well:  ", i_fltVolume);
          MECC::TraceComment(Translate("Calculations for dispensing ..........."));
          _intNumberOfCompleteColumns = intNumberOfSamples / 8;
          intNumberOfRemainingWells = intNumberOfSamples % 8;
          Trace ("Number of Complete Columns in Destination Plate:  ", _intNumberOfCompleteColumns);
          Trace ("Number of Wells in Last, Incomplete Column:  ", intNumberOfRemainingWells);
          if (intNumberOfRemainingWells > 0)
          {
            intNumberOfColumns = _intNumberOfCompleteColumns + 1;
          }
          else
          {
            intNumberOfColumns = _intNumberOfCompleteColumns;
          }
          Trace ("Total Number of Columns:  ", intNumberOfColumns);
          fltMaximalDispensesPerAspiration = 300 / (i_fltVolume * 1.0);
          intMaximalDispensesPerAspiration = MthFloor(fltMaximalDispensesPerAspiration);
          intMaximalDispensesPerAspiration = intMaximalDispensesPerAspiration - 2;
          Trace ("Maximal Number of Dispenses per Aspiration = ", intMaximalDispensesPerAspiration);
          intNumberOfAspirations = intNumberOfColumns / (intMaximalDispensesPerAspiration * 1.0);
          intNumberOfAspirations = MthCeiling(intNumberOfAspirations);
          if (intNumberOfAspirations == 1)
          {
            if (intNumberOfColumns < intMaximalDispensesPerAspiration)
            {
              MECC::TraceComment(Translate("Number of columns are less then Maximal Dispenses per Aspiration"));
              intNumberOfDispenses1 = intNumberOfColumns;
            }
            else
            {
              MECC::TraceComment(Translate("Number of columns are equal to Maximal Dispenses per Aspiration"));
              intNumberOfDispenses1 = intMaximalDispensesPerAspiration;
            }
            intNumberOfDispenses2 = 0;
            intNumberOfDispenses3 = 0;
            intNumberOfDispenses4 = 0;
          }
          if (intNumberOfAspirations == 2)
          {
            intNumberOfDispenses1 = intMaximalDispensesPerAspiration;
            intNumberOfDispenses2 = intNumberOfColumns - intMaximalDispensesPerAspiration;
            intNumberOfDispenses3 = 0;
          }
          if (intNumberOfAspirations == 3)
          {
            intNumberOfDispenses1 = intMaximalDispensesPerAspiration;
            intNumberOfDispenses2 = intMaximalDispensesPerAspiration;
            intMaximalDispensesPer2Aspirations = intMaximalDispensesPerAspiration * 2;
            intNumberOfDispenses3 = intNumberOfColumns - intMaximalDispensesPer2Aspirations;
          }
          if (intNumberOfAspirations == 4)
          {
            intNumberOfDispenses1 = intMaximalDispensesPerAspiration;
            intNumberOfDispenses2 = intMaximalDispensesPerAspiration;
            intNumberOfDispenses3 = intMaximalDispensesPerAspiration;
            intMaximalDispensesPer3Aspirations = intMaximalDispensesPerAspiration * 3;
            intNumberOfDispenses4 = intNumberOfColumns - intMaximalDispensesPer3Aspirations;
          }
          if (intNumberOfDispenses1 > 0)
          {
            intNumberOfAliquotsPerAsp1 = intNumberOfDispenses1 + 2;
            fltAspirationVolume_Loop1 = i_fltVolume * intNumberOfAliquotsPerAsp1;
          }
          if (intNumberOfDispenses2 > 0)
          {
            intNumberOfAliquotsPerAsp2 = intNumberOfDispenses2 + 2;
            fltAspirationVolume_Loop2 = i_fltVolume * intNumberOfAliquotsPerAsp2;
          }
          else
          {
            fltAspirationVolume_Loop2 = 0;
            fltAspirationVolume_Loop3 = 0;
            fltAspirationVolume_Loop4 = 0;
          }
          if (intNumberOfDispenses3 > 0)
          {
            intNumberOfAliquotsPerAsp3 = intNumberOfDispenses3 + 2;
            fltAspirationVolume_Loop3 = i_fltVolume * intNumberOfAliquotsPerAsp3;
          }
          else
          {
            fltAspirationVolume_Loop3 = 0;
            fltAspirationVolume_Loop4 = 0;
          }
          if (intNumberOfDispenses4 > 0)
          {
            intNumberOfAliquotsPerAsp4 = intNumberOfDispenses4 + 2;
            fltAspirationVolume_Loop4 = i_fltVolume * intNumberOfAliquotsPerAsp4;
          }
          else
          {
            fltAspirationVolume_Loop4 = 0;
          }
          Trace ("Number of Aspirations:  ", intNumberOfAspirations);
          Trace ("Number of Columns for the first set of dispenses:  ", intNumberOfDispenses1);
          Trace ("Number of Columns for the second set of dispenses:  ", intNumberOfDispenses2);
          Trace ("Number of Columns for the third set of dispenses:  ", intNumberOfDispenses3);
          Trace ("Number of Columns for the fourth set of dispenses:  ", intNumberOfDispenses4);
          Trace ("Aspiration volume for the first set of dispenses:  ", fltAspirationVolume_Loop1);
          Trace ("Aspiration volume for the second set of dispenses:  ", fltAspirationVolume_Loop2);
          Trace ("Aspiration volume for the third set of dispenses:  ", fltAspirationVolume_Loop3);
          Trace ("Aspiration volume for the fourth set of dispenses:  ", fltAspirationVolume_Loop4);
          if (fltAspirationVolume_Loop1 > 0)
          {
            _DATA_PlausibilityCheckVolume(fltAspirationVolume_Loop1, 5);
          }
          if (fltAspirationVolume_Loop2 > 0)
          {
            _DATA_PlausibilityCheckVolume(fltAspirationVolume_Loop2, 5);
          }
          if (fltAspirationVolume_Loop3 > 0)
          {
            _DATA_PlausibilityCheckVolume(fltAspirationVolume_Loop3, 5);
          }
          if (fltAspirationVolume_Loop4 > 0)
          {
            _DATA_PlausibilityCheckVolume(fltAspirationVolume_Loop4, 5);
          }
          MECC::TraceComment(Translate("********** Fill plate  ..........."));
          TrcTraceSequence(i_seqDispensePosition);
          {
            loopCounter2 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips300, 1, i_seqDispensePosition, 1);
              loopCounter2 = loopCounter2 + 1;
              if (loopCounter2 == 1)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                fltAspirationVolume = fltAspirationVolume_Loop1;
                intNumberOfDispenses = intNumberOfDispenses1;
              }
              if (loopCounter2 == 2)
              {
                fltAspirationVolume = fltAspirationVolume_Loop2;
                intNumberOfDispenses = intNumberOfDispenses2;
              }
              if (loopCounter2 == 3)
              {
                fltAspirationVolume = fltAspirationVolume_Loop3;
                intNumberOfDispenses = intNumberOfDispenses3;
              }
              if (loopCounter2 == 3)
              {
                fltAspirationVolume = fltAspirationVolume_Loop4;
                intNumberOfDispenses = intNumberOfDispenses4;
              }
              Trace ("MainLoopCounter Multidispense    :  ", loopCounter2);
              Trace ("Aspiration volume                :  ", fltAspirationVolume);
              Trace ("Pre-Mix volume                   :  ", fltMixVolume);
              Trace ("Dispense volume                  :  ", i_fltVolume);
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              {
                for(loopCounter3 = 0; loopCounter3 < intNumberOfDispenses;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  Trace ("SubLoopCounter during Multidispense :  ", loopCounter3);
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	strStepReturnValueDispense = arrRetValues[2];
                  }
                  _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
                }
              }
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            seq_Tips300.SetMax(seq_Tips300.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        else
        {
          MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
          customDialog_35.InitCustomDialog("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");
          customDialog_35.ShowCustomDialog();
          retValueDialog = customDialog_35.GetCustomDialogProperty( "ReturnValue" );
          abort;
        }
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, i_seqAspirationPosition);
      {
        variable _FilterIdsArray_36[];
        variable _ColumnIdsArray_36[];
        variable _ColumnNamesArray_36[];
        variable _ExperimentsArray_36[];
        _FilterIdsArray_36.SetSize(0);
        _ColumnNamesArray_36.SetSize(14);
        _ColumnIdsArray_36.SetSize(14);
        _ColumnNamesArray_36.SetAt(0, "RecordId");
        _ColumnIdsArray_36.SetAt(0, 0);
        _ColumnNamesArray_36.SetAt(1, "TRackBC");
        _ColumnIdsArray_36.SetAt(1, 1);
        _ColumnNamesArray_36.SetAt(2, "TLabwareId");
        _ColumnIdsArray_36.SetAt(2, 2);
        _ColumnNamesArray_36.SetAt(3, "TPositionId");
        _ColumnIdsArray_36.SetAt(3, 3);
        _ColumnNamesArray_36.SetAt(4, "TPositionBC");
        _ColumnIdsArray_36.SetAt(4, 4);
        _ColumnNamesArray_36.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_36.SetAt(5, 5);
        _ColumnNamesArray_36.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_36.SetAt(6, 6);
        _ColumnNamesArray_36.SetAt(7, "TVolume");
        _ColumnIdsArray_36.SetAt(7, 7);
        _ColumnNamesArray_36.SetAt(8, "SRackBC");
        _ColumnIdsArray_36.SetAt(8, 8);
        _ColumnNamesArray_36.SetAt(9, "SLabwareId");
        _ColumnIdsArray_36.SetAt(9, 9);
        _ColumnNamesArray_36.SetAt(10, "SPositionId");
        _ColumnIdsArray_36.SetAt(10, 10);
        _ColumnNamesArray_36.SetAt(11, "SPositionBC");
        _ColumnIdsArray_36.SetAt(11, 11);
        _ColumnNamesArray_36.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_36.SetAt(12, 12);
        _ColumnNamesArray_36.SetAt(13, "UserName");
        _ColumnIdsArray_36.SetAt(13, 13);
        _ExperimentsArray_36.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqDispensePosition, 3, _FilterIdsArray_36, 0, _ColumnIdsArray_36, _ColumnNamesArray_36, _ExperimentsArray_36, "Multidispense_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  _PIP_SVFTMultidispenseFromTroughToPlate <<<<<<<<<<\n-----------------------------------------------------------------------------------------------------------------------------------------------------------"));
  }

  function Trp_HSPDownholder( device & ML_STAR, sequence & i_seqDownholderSourcePosition, sequence & i_seqDownholderDestinationPosition, variable i_blnParkTransportToolAfterMove, variable i_blnDownholderSourcePositionIsOnPlate, variable i_blnDownholderDestinationPositionIsOnPlate, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable GripWidth;
    private variable GripOpening;
    private variable strInformatioToBeUpdated;
    private variable strSequenceNameStartingPosition;
    private variable strSequenceNameDestinationPosition;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Trp_HSPDownholder <<<<<<<<<<"));
    strSequenceNameStartingPosition = SeqGetName(i_seqDownholderSourcePosition);
    strSequenceNameDestinationPosition = SeqGetName(i_seqDownholderDestinationPosition);
    strInformatioToBeUpdated = StrConcat8(Translate("Trp_HSPDownholder"), Translate(" : "), strSequenceNameStartingPosition, Translate(" -----> "), strSequenceNameDestinationPosition, Translate(""), Translate(""), Translate(""));
    DATA_UpdateInformationIntoReportFile(strInformatioToBeUpdated, i_blnUpdateInformationIntoReporFile);
    if (i_blnDownholderSourcePositionIsOnPlate == 1)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqDownholderSourcePosition, 0, 0, 8);
    }
    else
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqDownholderSourcePosition, 0, 0, 6);
    }
    if (i_blnDownholderDestinationPositionIsOnPlate == 1)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqDownholderDestinationPosition, 0, 0, 8);
    }
    else
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqDownholderDestinationPosition, 0, 0, 6);
    }
    if (_intTransportTool == 1)
    {
      MECC::TraceComment(Translate("Using iSWAP for Adapter Movements"));
      ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
      ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
      if (i_blnParkTransportToolAfterMove == 1)
      {
        ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
    }
    if (_intTransportTool == 2)
    {
      MECC::TraceComment(Translate("Using CORE grippers for adapter movements"));
      GripWidth = 79.5;
      GripOpening = 87;
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      if (i_blnParkTransportToolAfterMove == 1)
      {
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
      else
      {
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
    }
    if (i_blnDownholderSourcePositionIsOnPlate == 1)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqDownholderSourcePosition, 0, 0, -8);
    }
    else
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqDownholderSourcePosition, 0, 0, -6);
    }
    if (i_blnDownholderDestinationPositionIsOnPlate == 1)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqDownholderDestinationPosition, 0, 0, -8);
    }
    else
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqDownholderDestinationPosition, 0, 0, -6);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Trp_HSPDownholder <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_Supernatant_SVFT_MPHSingleDispenseFromPlateToWasteMPH( device & ML_STAR, sequence & i_seqAspirationPosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intNumberOfSamples, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable strCurrentDispenseMode;
    private variable flt_VolumeAsp1;
    private variable flt_VolumeAsp2;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable strStepReturnValueDispense;
    private variable fltVolumeDelta;
    private variable strStepReturnValueAspiration;
    private variable retValueDialog;
    private sequence seq_DispensePosition;
    private dialog customDialog_37;
    private dialog customDialog_38;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_Supernatant_SVFT_MPHSingleDispenseFromPlateToWasteMPH <<<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("PIP_Supernatant_SVFT_MPHSingleDispenseFromPlateToWasteMPH"), i_blnUpdateInformationIntoReporFile);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
      _DATA_PlausibilityCheckVolume(i_fltVolume, intCurrentTipType);
      fltVolumeDelta = 300 - i_fltVolume;
      if (fltVolumeDelta < 20)
      {
        flt_VolumeAsp1 = 280;
        flt_VolumeAsp2 = 20;
      }
      else
      {
        flt_VolumeAsp1 = i_fltVolume;
        flt_VolumeAsp2 = 20;
      }
      if (intCurrentDispenseMode == 2)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (intCurrentDispenseMode == 4)
        {
          strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (strCurrentDispenseMode == "Empty")
      {
        SeqResetSequenceIndexes(i_seqAspirationPosition);
        i_seqAspirationPosition.SetCurrentPosition(1);
        i_seqAspirationPosition.SetCount(96);
        TrcTraceSequence(i_seqAspirationPosition);
        if (intCurrentTipType == 1)
        {
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            	strStepReturnValueAspiration = arrRetValues[2];
          }
          MECC::TraceComment(Translate("consecutive aspiration step to remove residual EtOH"));
          ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
          DATA_TipCounterWrite(ML_STAR);
          i_seqAspirationPosition.SetCount(i_intNumberOfSamples);
          _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReportMPH(strStepReturnValueAspiration, strStepReturnValueDispense, i_seqAspirationPosition, seq_DispensePosition, ASWGLOBAL::BOOL::TRUE);
        }
        else
        {
          MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
          customDialog_37.InitCustomDialog("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");
          customDialog_37.ShowCustomDialog();
          retValueDialog = customDialog_37.GetCustomDialogProperty( "ReturnValue" );
          abort;
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        customDialog_38.InitCustomDialog("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");
        customDialog_38.ShowCustomDialog();
        retValueDialog = customDialog_38.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_Supernatant_SVFT_MPHSingleDispenseFromPlateToWasteMPH <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function Trp_TipsWithMPH( device & ML_STAR, sequence & i_seqTipPickUpPosition, sequence & i_seqTipEjectPosition, variable i_blnCountTipsAtTipPickUpPosition ) void {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Trp_TipsWithMPH <<<<<<<<<<"));
    if (i_blnCountTipsAtTipPickUpPosition == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      DATA_TipCounterWrite(ML_STAR);
    }
    else
    {
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Trp_TipsWithMPH <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_IndexAdapters_LVFT_AccordingToInputSequences( device & ML_STAR, sequence & i_seqIndexAdapters, sequence & i_seqAdapterLigationPlate, variable i_strLiquidClassName, variable i_fltVolumeAdapter, variable i_intMixCycles, variable i_fltVolumeMix, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable strTypeOfLabware;
    private variable loopCounter1;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable loopCounter3;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private variable retValueDialog;
    private variable strLabwareID_ALP;
    private variable strLabwareID_Adapters;
    private dialog customDialog_39;
    private dialog customDialog_40;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_IndexAdapters_LVFT_AccordingToInputSequences <<<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("PIP_IndexAdapters_LVFT_AccordingToInputSequences"), i_blnUpdateInformationIntoReporFile);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassName, intCurrentTipType, intCurrentDispenseMode);
      _DATA_PlausibilityCheckVolume(i_fltVolumeAdapter, intCurrentTipType);
      strLabwareID_Adapters = SeqGetLabwareId(i_seqIndexAdapters);
      _DATA_InterpreteLabwareID(strLabwareID_Adapters, strTypeOfLabware);
      strLabwareID_ALP = SeqGetLabwareId(i_seqAdapterLigationPlate);
      i_seqIndexAdapters.SetCurrentPosition(1);
      i_seqAdapterLigationPlate.SetCurrentPosition(1);
      if (strTypeOfLabware == "plate")
      {
        HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
        if (intCurrentTipType == 23)
        {
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
        }
        {
          loopCounter1 = 0;
          while (
             (i_seqAdapterLigationPlate.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seqIndexAdapters, 1, seq_Tips50, 1, i_seqAdapterLigationPlate, 1);
            loopCounter1 = loopCounter1 + 1;
            if (intCurrentTipType == 23)
            {
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              DATA_TipCounterWrite(ML_STAR);
            }
            else
            {
              MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------\n\nWrong Tiptype detected - Transfer of liquid denied\n\nиииииииииииииииииииииииииииииииииииииииииииииииииииииии-иииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииии "));
              customDialog_40.InitCustomDialog("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");
              customDialog_40.ShowCustomDialog();
              retValueDialog = customDialog_40.GetCustomDialogProperty( "ReturnValue" );
              abort;
            }
            if (
               (i_seqAdapterLigationPlate.GetCurrentPosition() > 0 && i_seqAdapterLigationPlate.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seqIndexAdapters.SetMax(i_seqIndexAdapters.GetTotal());
          seq_Tips50.SetMax(seq_Tips50.GetTotal());
          i_seqAdapterLigationPlate.SetMax(i_seqAdapterLigationPlate.GetTotal());
          i_seqIndexAdapters.SetCurrentPosition(1);
          i_seqAdapterLigationPlate.SetCurrentPosition(1);
        }
        if (intCurrentTipType == 23)
        {
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
        }
        STCC::ResetFilterSequences();
        STCC::AddFilterSequence(ML_STAR, i_seqAdapterLigationPlate);
        {
          variable _FilterIdsArray_41[];
          variable _ColumnIdsArray_41[];
          variable _ColumnNamesArray_41[];
          variable _ExperimentsArray_41[];
          _FilterIdsArray_41.SetSize(0);
          _ColumnNamesArray_41.SetSize(14);
          _ColumnIdsArray_41.SetSize(14);
          _ColumnNamesArray_41.SetAt(0, "RecordId");
          _ColumnIdsArray_41.SetAt(0, 0);
          _ColumnNamesArray_41.SetAt(1, "TRackBC");
          _ColumnIdsArray_41.SetAt(1, 1);
          _ColumnNamesArray_41.SetAt(2, "TLabwareId");
          _ColumnIdsArray_41.SetAt(2, 2);
          _ColumnNamesArray_41.SetAt(3, "TPositionId");
          _ColumnIdsArray_41.SetAt(3, 3);
          _ColumnNamesArray_41.SetAt(4, "TPositionBC");
          _ColumnIdsArray_41.SetAt(4, 4);
          _ColumnNamesArray_41.SetAt(5, "TStatusSummary");
          _ColumnIdsArray_41.SetAt(5, 5);
          _ColumnNamesArray_41.SetAt(6, "TSumStateDescription");
          _ColumnIdsArray_41.SetAt(6, 6);
          _ColumnNamesArray_41.SetAt(7, "TVolume");
          _ColumnIdsArray_41.SetAt(7, 7);
          _ColumnNamesArray_41.SetAt(8, "SRackBC");
          _ColumnIdsArray_41.SetAt(8, 8);
          _ColumnNamesArray_41.SetAt(9, "SLabwareId");
          _ColumnIdsArray_41.SetAt(9, 9);
          _ColumnNamesArray_41.SetAt(10, "SPositionId");
          _ColumnIdsArray_41.SetAt(10, 10);
          _ColumnNamesArray_41.SetAt(11, "SPositionBC");
          _ColumnIdsArray_41.SetAt(11, 11);
          _ColumnNamesArray_41.SetAt(12, "ActionDateTime");
          _ColumnIdsArray_41.SetAt(12, 12);
          _ColumnNamesArray_41.SetAt(13, "UserName");
          _ColumnIdsArray_41.SetAt(13, 13);
          _ExperimentsArray_41.SetSize(0);
          STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqIndexAdapters, 3, _FilterIdsArray_41, 0, _ColumnIdsArray_41, _ColumnNamesArray_41, _ExperimentsArray_41, "indices_to_ALP_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
        }
      }
      if (strTypeOfLabware == "tube")
      {
        if (intCurrentTipType == 23)
        {
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
          MECC::TraceComment(Translate("********** Fill the ALP with the Index adapters **************"));
          {
            loopCounter3 = 0;
            while (
               (i_seqAdapterLigationPlate.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqIndexAdapters, 1, seq_Tips50, 1, i_seqAdapterLigationPlate, 1);
              loopCounter3 = loopCounter3 + 1;
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqAdapterLigationPlate.GetCurrentPosition() > 0 && i_seqAdapterLigationPlate.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqIndexAdapters.SetMax(i_seqIndexAdapters.GetTotal());
            seq_Tips50.SetMax(seq_Tips50.GetTotal());
            i_seqAdapterLigationPlate.SetMax(i_seqAdapterLigationPlate.GetTotal());
            i_seqIndexAdapters.SetCurrentPosition(1);
            i_seqAdapterLigationPlate.SetCurrentPosition(1);
          }
          STCC::ResetFilterSequences();
          STCC::AddFilterSequence(ML_STAR, i_seqIndexAdapters);
          {
            variable _FilterIdsArray_42[];
            variable _ColumnIdsArray_42[];
            variable _ColumnNamesArray_42[];
            variable _ExperimentsArray_42[];
            _FilterIdsArray_42.SetSize(0);
            _ColumnNamesArray_42.SetSize(14);
            _ColumnIdsArray_42.SetSize(14);
            _ColumnNamesArray_42.SetAt(0, "RecordId");
            _ColumnIdsArray_42.SetAt(0, 0);
            _ColumnNamesArray_42.SetAt(1, "TRackBC");
            _ColumnIdsArray_42.SetAt(1, 1);
            _ColumnNamesArray_42.SetAt(2, "TLabwareId");
            _ColumnIdsArray_42.SetAt(2, 2);
            _ColumnNamesArray_42.SetAt(3, "TPositionId");
            _ColumnIdsArray_42.SetAt(3, 3);
            _ColumnNamesArray_42.SetAt(4, "TPositionBC");
            _ColumnIdsArray_42.SetAt(4, 4);
            _ColumnNamesArray_42.SetAt(5, "TStatusSummary");
            _ColumnIdsArray_42.SetAt(5, 5);
            _ColumnNamesArray_42.SetAt(6, "TSumStateDescription");
            _ColumnIdsArray_42.SetAt(6, 6);
            _ColumnNamesArray_42.SetAt(7, "TVolume");
            _ColumnIdsArray_42.SetAt(7, 7);
            _ColumnNamesArray_42.SetAt(8, "SRackBC");
            _ColumnIdsArray_42.SetAt(8, 8);
            _ColumnNamesArray_42.SetAt(9, "SLabwareId");
            _ColumnIdsArray_42.SetAt(9, 9);
            _ColumnNamesArray_42.SetAt(10, "SPositionId");
            _ColumnIdsArray_42.SetAt(10, 10);
            _ColumnNamesArray_42.SetAt(11, "SPositionBC");
            _ColumnIdsArray_42.SetAt(11, 11);
            _ColumnNamesArray_42.SetAt(12, "ActionDateTime");
            _ColumnIdsArray_42.SetAt(12, 12);
            _ColumnNamesArray_42.SetAt(13, "UserName");
            _ColumnIdsArray_42.SetAt(13, 13);
            _ExperimentsArray_42.SetSize(0);
            STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqAdapterLigationPlate, 3, _FilterIdsArray_42, 0, _ColumnIdsArray_42, _ColumnNamesArray_42, _ExperimentsArray_42, "Indices_to_ALP_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
          }
          if (intCurrentTipType == 23)
          {
            if(0){
              ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
            }
          }
        }
        else
        {
          MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------\n\nWrong Tiptype detected - Transfer of liquid denied\n\nиииииииииииииииииииииииииииииииииииииииииииииииииииииии-иииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииииии "));
          customDialog_39.InitCustomDialog("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");
          customDialog_39.ShowCustomDialog();
          retValueDialog = customDialog_39.GetCustomDialogProperty( "ReturnValue" );
          abort;
        }
      }
      HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_IndexAdapters_LVFT_AccordingToInputSequences <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReportMPH( variable i_strStepReturnValueAspiration, variable i_strStepReturnValueDispense, sequence i_seqAspiration, sequence i_seqDispense, variable i_blnAnalyseAspirationSetpReturnOnly ) void {
    private variable intNumberOfPositions;
    private variable strCurrentPosIDTarget;
    private variable intIndexNumberOfPositions;
    private variable strCurrentLabIDSource;
    private variable intGetPositionFromNum;
    private variable strCurrentTime;
    private variable strCurrentDate;
    private variable strCurrentPosIDSource;
    private variable strCurrentLabIDTarget;
    private variable strGetStepData;
    private file NGSStarReportFile2;
    private variable loopCounter1;
    if(0){
      Trace ("StepReturnValue Aspiration to be analyzed :  ", i_strStepReturnValueAspiration);
      Trace ("StepReturnValue Dispense to be analyzed :  ", i_strStepReturnValueDispense);
    }
    strCurrentDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    if(0){
      Trace ("Update Current Date                :  ", strCurrentDate);
      Trace ("Update Current Time                :  ", strCurrentTime);
    }
    intNumberOfPositions = StepReturn::GetNumberOfPositions(i_strStepReturnValueAspiration);
    NGSStarReportFile2.AddField("Date", strCurrentDate, hslString, 255);
    NGSStarReportFile2.AddField("Time", strCurrentTime, hslString, 255);
    NGSStarReportFile2.AddField("LabID Source", strCurrentLabIDSource, hslString, 255);
    NGSStarReportFile2.AddField("PosID Source", strCurrentPosIDSource, hslString, 255);
    NGSStarReportFile2.AddField("Transfer Volume", strGetStepData, hslString, 255);
    NGSStarReportFile2.AddField("LabID Target", strCurrentLabIDTarget, hslString, 255);
    NGSStarReportFile2.AddField("PosID Target", strCurrentPosIDTarget, hslString, 255);
    if( 0 == NGSStarReportFile2.Open(_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strFullPathReportFile, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (i_seqAspiration.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqAspiration, 1, i_seqDispense, 1);
        loopCounter1 = loopCounter1 + 1;
        intIndexNumberOfPositions = 1;
        strCurrentPosIDSource = SeqGetPositionId(i_seqAspiration);
        SeqIncrement(i_seqAspiration, 1);
        intGetPositionFromNum = StepReturn::GetPositionFromNum(intIndexNumberOfPositions, i_strStepReturnValueAspiration);
        strCurrentLabIDSource = StepReturn::GetLabwareId(intGetPositionFromNum, i_strStepReturnValueAspiration);
        if (i_blnAnalyseAspirationSetpReturnOnly == ASWGLOBAL::BOOL::FALSE)
        {
          strCurrentPosIDTarget = SeqGetPositionId(i_seqDispense);
          SeqIncrement(i_seqDispense, 1);
          strCurrentLabIDTarget = StepReturn::GetLabwareId(intGetPositionFromNum, i_strStepReturnValueDispense);
        }
        else
        {
          strCurrentLabIDTarget = Translate("discarded to waste MPH 96");
          strCurrentPosIDTarget = strCurrentPosIDSource;
        }
        strGetStepData = StepReturn::GetStepData(intIndexNumberOfPositions, i_strStepReturnValueAspiration);
        if (strGetStepData != "")
        {
          if( 0 == NGSStarReportFile2.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        if (
           (i_seqAspiration.GetCurrentPosition() > 0 && i_seqAspiration.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqAspiration.SetMax(i_seqAspiration.GetTotal());
      i_seqDispense.SetMax(i_seqDispense.GetTotal());
      i_seqAspiration.SetCurrentPosition(1);
      i_seqDispense.SetCurrentPosition(1);
    }
    if( 0 != NGSStarReportFile2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NGSStarReportFile2.RemoveFields();
  }

  function PIP_ReagentsFromTubePlateOrTroughToPlateAccordingToSequencesAndVolumeArray( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable & i_arrFltVolume[], variable i_strLiquidClassNameTransfer, variable i_blnTipExchangeDuringTransfer, variable i_intMixCycles, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable strCurrentDispenseMode;
    private variable strTypeOfLabware;
    private variable intNumberOfSamples;
    private variable strLabwareIDAspiration;
    private variable intCurrentDispenseMode;
    private variable loopCounter1;
    private variable intCurrentTipType;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private variable intSizeArrFltVolume;
    private variable intArrFltVolumeIndex;
    private variable retValueDialog;
    private variable intArrayIndexCounter;
    private variable fltVolumeOfCurrentArrayIndex;
    private dialog customDialog_43;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_ReagentsFromTubePlateOrTroughToPlateAccordingToSequencesAndVolumeArray <<<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("PIP_ReagentsFromTubePlateOrTroughToPlateAccordingToSequencesAndVolumeArray"), i_blnUpdateInformationIntoReporFile);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
      intSizeArrFltVolume=i_arrFltVolume.GetSize();
      {
        for(intArrFltVolumeIndex = 0; intArrFltVolumeIndex < intSizeArrFltVolume;)
        {
          intArrFltVolumeIndex = intArrFltVolumeIndex + 1;
          fltVolumeOfCurrentArrayIndex=i_arrFltVolume.GetAt(intArrFltVolumeIndex-1);
          _DATA_PlausibilityCheckVolume(fltVolumeOfCurrentArrayIndex, intCurrentTipType);
        }
      }
      strLabwareIDAspiration = SeqGetLabwareId(i_seqAspirationPosition);
      _DATA_InterpreteLabwareID(strLabwareIDAspiration, strTypeOfLabware);
      intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (intCurrentDispenseMode == 2)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (intCurrentDispenseMode == 4)
        {
          strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (strCurrentDispenseMode == "Empty")
      {
        if (strTypeOfLabware == "tube")
        {
        }
        if (strTypeOfLabware == "trough")
        {
        }
        MECC::TraceComment(Translate("********** Now pipetting reagents to destination plate"));
        intArrayIndexCounter = 1;
        if (intCurrentTipType == 1)
        {
          {
            loopCounter1 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips300, 1, i_seqDispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              intArrayIndexCounter = intArrayIndexCounter + 8;
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            seq_Tips300.SetMax(seq_Tips300.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (intCurrentTipType == 5)
        {
          {
            loopCounter1 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips1000, 1, i_seqDispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              intArrayIndexCounter = intArrayIndexCounter + 8;
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            seq_Tips1000.SetMax(seq_Tips1000.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (intCurrentTipType == 23)
        {
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
          {
            loopCounter1 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips50, 1, i_seqDispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              intArrayIndexCounter = intArrayIndexCounter + 8;
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            seq_Tips50.SetMax(seq_Tips50.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        if (intCurrentTipType == 23)
        {
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
        }
      }
      if (strCurrentDispenseMode == "Part")
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        customDialog_43.InitCustomDialog("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");
        customDialog_43.ShowCustomDialog();
        retValueDialog = customDialog_43.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, i_seqAspirationPosition);
      {
        variable _FilterIdsArray_44[];
        variable _ColumnIdsArray_44[];
        variable _ColumnNamesArray_44[];
        variable _ExperimentsArray_44[];
        _FilterIdsArray_44.SetSize(0);
        _ColumnNamesArray_44.SetSize(14);
        _ColumnIdsArray_44.SetSize(14);
        _ColumnNamesArray_44.SetAt(0, "RecordId");
        _ColumnIdsArray_44.SetAt(0, 0);
        _ColumnNamesArray_44.SetAt(1, "TRackBC");
        _ColumnIdsArray_44.SetAt(1, 1);
        _ColumnNamesArray_44.SetAt(2, "TLabwareId");
        _ColumnIdsArray_44.SetAt(2, 2);
        _ColumnNamesArray_44.SetAt(3, "TPositionId");
        _ColumnIdsArray_44.SetAt(3, 3);
        _ColumnNamesArray_44.SetAt(4, "TPositionBC");
        _ColumnIdsArray_44.SetAt(4, 4);
        _ColumnNamesArray_44.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_44.SetAt(5, 5);
        _ColumnNamesArray_44.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_44.SetAt(6, 6);
        _ColumnNamesArray_44.SetAt(7, "TVolume");
        _ColumnIdsArray_44.SetAt(7, 7);
        _ColumnNamesArray_44.SetAt(8, "SRackBC");
        _ColumnIdsArray_44.SetAt(8, 8);
        _ColumnNamesArray_44.SetAt(9, "SLabwareId");
        _ColumnIdsArray_44.SetAt(9, 9);
        _ColumnNamesArray_44.SetAt(10, "SPositionId");
        _ColumnIdsArray_44.SetAt(10, 10);
        _ColumnNamesArray_44.SetAt(11, "SPositionBC");
        _ColumnIdsArray_44.SetAt(11, 11);
        _ColumnNamesArray_44.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_44.SetAt(12, 12);
        _ColumnNamesArray_44.SetAt(13, "UserName");
        _ColumnIdsArray_44.SetAt(13, 13);
        _ExperimentsArray_44.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqDispensePosition, 3, _FilterIdsArray_44, 0, _ColumnIdsArray_44, _ColumnNamesArray_44, _ExperimentsArray_44, "Reagents_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_ReagentsFromTubePlateOrTroughToPlateAccordingToSequencesAndVolumeArray<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_SerialDilutionAccordingToSequencesAndVolumeArray( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable & i_arrFltVolume[], variable i_strLiquidClassNameTransfer, variable i_blnTipExchangeDuringTransfer, variable i_intMixCycles, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable strCurrentDispenseMode;
    private variable strTypeOfLabware;
    private variable intSizeArrFltVolume;
    private variable intNumberOfSamples;
    private variable strLabwareIDAspiration;
    private variable loopCounter1;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable strStepReturnValueDispense;
    private variable intArrFltVolumeIndex;
    private variable strStepReturnValueAspiration;
    private variable retValueDialog;
    private variable intArrayIndexCounter;
    private variable fltVolumeOfCurrentArrayIndex;
    private dialog customDialog_45;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: PIP_SerialDilutionAccordingToSequencesAndVolumeArray <<<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("PIP_SerialDilutionAccordingToSequencesAndVolumeArray"), i_blnUpdateInformationIntoReporFile);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
      intSizeArrFltVolume=i_arrFltVolume.GetSize();
      {
        for(intArrFltVolumeIndex = 0; intArrFltVolumeIndex < intSizeArrFltVolume;)
        {
          intArrFltVolumeIndex = intArrFltVolumeIndex + 1;
          fltVolumeOfCurrentArrayIndex=i_arrFltVolume.GetAt(intArrFltVolumeIndex-1);
          _DATA_PlausibilityCheckVolume(fltVolumeOfCurrentArrayIndex, intCurrentTipType);
        }
      }
      strLabwareIDAspiration = SeqGetLabwareId(i_seqAspirationPosition);
      _DATA_InterpreteLabwareID(strLabwareIDAspiration, strTypeOfLabware);
      intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (intCurrentDispenseMode == 2)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (intCurrentDispenseMode == 4)
        {
          strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (strCurrentDispenseMode == "Empty")
      {
        if (strTypeOfLabware == "tube")
        {
        }
        if (strTypeOfLabware == "trough")
        {
        }
        MECC::TraceComment(Translate("********** Now pipetting reagents to destination plate"));
        intArrayIndexCounter = 1;
        if (intCurrentTipType == 1)
        {
          {
            loopCounter1 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips300, 1, i_seqDispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              intArrayIndexCounter = intArrayIndexCounter + 1;
              SeqIncrement(seq_Tips300, 1);
              SeqIncrement(i_seqAspirationPosition, 1);
              SeqIncrement(i_seqDispensePosition, 1);
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            seq_Tips300.SetMax(seq_Tips300.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (intCurrentTipType == 5)
        {
          {
            loopCounter1 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips1000, 1, i_seqDispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              intArrayIndexCounter = intArrayIndexCounter + 1;
              SeqIncrement(seq_Tips1000, 1);
              SeqIncrement(i_seqAspirationPosition, 1);
              SeqIncrement(i_seqDispensePosition, 1);
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            seq_Tips1000.SetMax(seq_Tips1000.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (intCurrentTipType == 23)
        {
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
          {
            loopCounter1 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips50, 1, i_seqDispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              intArrayIndexCounter = intArrayIndexCounter + 1;
              SeqIncrement(seq_Tips50, 1);
              SeqIncrement(i_seqAspirationPosition, 1);
              SeqIncrement(i_seqDispensePosition, 1);
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            seq_Tips50.SetMax(seq_Tips50.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        if (intCurrentTipType == 23)
        {
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
        }
      }
      if (strCurrentDispenseMode == "Part")
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        customDialog_45.InitCustomDialog("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");
        customDialog_45.ShowCustomDialog();
        retValueDialog = customDialog_45.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, i_seqAspirationPosition);
      {
        variable _FilterIdsArray_46[];
        variable _ColumnIdsArray_46[];
        variable _ColumnNamesArray_46[];
        variable _ExperimentsArray_46[];
        _FilterIdsArray_46.SetSize(0);
        _ColumnNamesArray_46.SetSize(14);
        _ColumnIdsArray_46.SetSize(14);
        _ColumnNamesArray_46.SetAt(0, "RecordId");
        _ColumnIdsArray_46.SetAt(0, 0);
        _ColumnNamesArray_46.SetAt(1, "TRackBC");
        _ColumnIdsArray_46.SetAt(1, 1);
        _ColumnNamesArray_46.SetAt(2, "TLabwareId");
        _ColumnIdsArray_46.SetAt(2, 2);
        _ColumnNamesArray_46.SetAt(3, "TPositionId");
        _ColumnIdsArray_46.SetAt(3, 3);
        _ColumnNamesArray_46.SetAt(4, "TPositionBC");
        _ColumnIdsArray_46.SetAt(4, 4);
        _ColumnNamesArray_46.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_46.SetAt(5, 5);
        _ColumnNamesArray_46.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_46.SetAt(6, 6);
        _ColumnNamesArray_46.SetAt(7, "TVolume");
        _ColumnIdsArray_46.SetAt(7, 7);
        _ColumnNamesArray_46.SetAt(8, "SRackBC");
        _ColumnIdsArray_46.SetAt(8, 8);
        _ColumnNamesArray_46.SetAt(9, "SLabwareId");
        _ColumnIdsArray_46.SetAt(9, 9);
        _ColumnNamesArray_46.SetAt(10, "SPositionId");
        _ColumnIdsArray_46.SetAt(10, 10);
        _ColumnNamesArray_46.SetAt(11, "SPositionBC");
        _ColumnIdsArray_46.SetAt(11, 11);
        _ColumnNamesArray_46.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_46.SetAt(12, 12);
        _ColumnNamesArray_46.SetAt(13, "UserName");
        _ColumnIdsArray_46.SetAt(13, 13);
        _ExperimentsArray_46.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqDispensePosition, 3, _FilterIdsArray_46, 0, _ColumnIdsArray_46, _ColumnNamesArray_46, _ExperimentsArray_46, "Reagents_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_SerialDilutionAccordingToSequencesAndVolumeArray<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_TipCounterRead( device & ML_STAR, variable i_intNumberOfTip50_required, variable i_intNumberOfTip300_required, variable i_intNumberOfTip300MPH_required, variable i_intNumberOfTip1000_required, variable i_intTipTypeToBeProcessed, variable i_blnAlwaysEditTipcounter, variable i_blnShowGUITipAndTimeCalculation ) void {
    private dialog customDialog_47;
    private dialog customDialog_48;
    private variable blnReloadAllTipTypes;
    private variable bln_ProcessTip300;
    private variable bln_scheduleTipReloadDuringProcess;
    private variable retValueDialog;
    private variable bln_ProcessTip1000;
    private variable bln_ProcessTip50;
    private variable bln_ProcessTip300MPH;
    private variable intCurrentPosition_1000;
    private variable intCurrentPosition_300;
    private variable intCurrentPosition_300MPH;
    private variable intCurrentPosition_50;
    private variable intEndPosition_1000;
    private variable intEndPosition_300;
    private variable intEndPosition_300MPH;
    private variable intEndPosition_50;
    private variable intCalculatedQuantity_1000;
    private variable intCalculatedQuantity_300;
    private variable intCalculatedQuantity_300MPH;
    private variable intCalculatedQuantity_50;
    private variable strText_Insufficient1000s;
    private variable strText_Insufficient300sMPH;
    private variable strText_Insufficient300s;
    private variable strText_Insufficient50s;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_TipCounterReadV2<<<<<<<<<<"));
    Trace ("---Number of 50uL tips required: ", i_intNumberOfTip50_required);
    Trace ("---Number of 300uL tips required: ", i_intNumberOfTip300_required);
    Trace ("---Number of 300uL tips for MPH required: ", i_intNumberOfTip300MPH_required);
    Trace ("---Number of 1000uL tips required: ", i_intNumberOfTip1000_required);
    bln_ProcessTip50 = ASWGLOBAL::BOOL::FALSE;
    bln_ProcessTip300 = ASWGLOBAL::BOOL::FALSE;
    bln_ProcessTip300MPH = ASWGLOBAL::BOOL::FALSE;
    bln_ProcessTip1000 = ASWGLOBAL::BOOL::FALSE;
    bln_scheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::FALSE;
    if (i_intTipTypeToBeProcessed == 5)
    {
      bln_ProcessTip50 = ASWGLOBAL::BOOL::TRUE;
      bln_ProcessTip300 = ASWGLOBAL::BOOL::TRUE;
      bln_ProcessTip300MPH = ASWGLOBAL::BOOL::TRUE;
      bln_ProcessTip1000 = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      if (i_intTipTypeToBeProcessed == 1)
      {
        bln_ProcessTip50 = ASWGLOBAL::BOOL::TRUE;
      }
      if (i_intTipTypeToBeProcessed == 2)
      {
        bln_ProcessTip300 = ASWGLOBAL::BOOL::TRUE;
      }
      if (i_intTipTypeToBeProcessed == 3)
      {
        bln_ProcessTip300MPH = ASWGLOBAL::BOOL::TRUE;
      }
      if (i_intTipTypeToBeProcessed == 4)
      {
        bln_ProcessTip1000 = ASWGLOBAL::BOOL::TRUE;
      }
    }
    strText_Insufficient50s = Translate(" No reload of this tip type necessary");
    strText_Insufficient300s = Translate(" No reload of this tip type necessary");
    strText_Insufficient300sMPH = Translate(" No reload of this tip type necessary");
    strText_Insufficient1000s = Translate(" No reload of this tip type necessary");
    if (bln_ProcessTip50 == ASWGLOBAL::BOOL::TRUE)
    {
      if (i_blnAlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        TipCount::Edit2(seq_Tips50, _strTipCounterNameTip50, ML_STAR, 999);
        _intMaxSeqTips50AfterEdit = seq_Tips50.GetCount();
      }
      else
      {
        TipCount::Read2(seq_Tips50, _strTipCounterNameTip50, ML_STAR);
      }
      intCurrentPosition_50 = seq_Tips50.GetCurrentPosition();
      intEndPosition_50 = seq_Tips50.GetCount();
      intCalculatedQuantity_50 = intEndPosition_50 - intCurrentPosition_50;
      intCalculatedQuantity_50 = intCalculatedQuantity_50 + 1;
      _intConsumedTips50 = _intMaxSeqTips50AfterEdit - intCalculatedQuantity_50;
      TrcTrace12(Translate("CurrentPosition_50 : "), intCurrentPosition_50, Translate(" - EndPosition_50 : "), intEndPosition_50, Translate(" - Quantity_50 : "), intCalculatedQuantity_50, Translate(" - _intMaxSeqTips50AfterEdit : "), _intMaxSeqTips50AfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTips50 : "), _intConsumedTips50);
      if (intCalculatedQuantity_50 < i_intNumberOfTip50_required)
      {
        _blnInsuffientTips = 1;
        if (i_intNumberOfTip50_required > 960)
        {
          strText_Insufficient50s = Translate("\nPlease load two full carriers of 50ul tips.  You will need to come back later to replenish.");
        }
        else
        {
          strText_Insufficient50s = Translate("\nPlease load more 50ul tips.  You will need at least this many:  ");
          strText_Insufficient50s = StrConcat2(strText_Insufficient50s, i_intNumberOfTip50_required);
        }
      }
      else
      {
        strText_Insufficient50s = Translate(" No reload of this tip type necessary");
      }
    }
    if (bln_ProcessTip300 == ASWGLOBAL::BOOL::TRUE)
    {
      if (i_blnAlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        TipCount::Edit2(seq_Tips300, _strTipCounterNameTip300, ML_STAR, 999);
        _intMaxSeqTips300AfterEdit = seq_Tips300.GetCount();
      }
      else
      {
        TipCount::Read2(seq_Tips300, _strTipCounterNameTip300, ML_STAR);
      }
      intCurrentPosition_300 = seq_Tips300.GetCurrentPosition();
      intEndPosition_300 = seq_Tips300.GetCount();
      intCalculatedQuantity_300 = intEndPosition_300 - intCurrentPosition_300;
      intCalculatedQuantity_300 = intCalculatedQuantity_300 + 1;
      _intConsumedTips300 = _intMaxSeqTips300AfterEdit - intCalculatedQuantity_300;
      TrcTrace12(Translate("CurrentPosition_300 : "), intCurrentPosition_300, Translate(" - EndPosition_300 : "), intEndPosition_300, Translate(" - Quantity_300 : "), intCalculatedQuantity_300, Translate(" - _intMaxSeqTips300AfterEdit : "), _intMaxSeqTips300AfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTips300 : "), _intConsumedTips300);
      if (intCalculatedQuantity_300 < i_intNumberOfTip300_required)
      {
        _blnInsuffientTips = 1;
        if (i_intNumberOfTip300_required > 960)
        {
          strText_Insufficient300s = Translate("\nPlease load two full carriers of 300ul tips.  You will need to come back later to replenish.");
        }
        else
        {
          strText_Insufficient300s = Translate("\nPlease load more 300ul tips.  You will need at least this many:  ");
          strText_Insufficient300s = StrConcat2(strText_Insufficient300s, i_intNumberOfTip300_required);
        }
      }
      else
      {
        strText_Insufficient300s = Translate(" No reload of this tip type necessary");
      }
    }
    if (bln_ProcessTip300MPH == ASWGLOBAL::BOOL::TRUE)
    {
      if (i_blnAlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        TipCount::Edit2(seq_Tips300MPH, _strTipCounterNameTip300MPH, ML_STAR, 999);
        _intMaxSeqTips300MPHAfterEdit = seq_Tips300MPH.GetCount();
      }
      else
      {
        TipCount::Read2(seq_Tips300MPH, _strTipCounterNameTip300MPH, ML_STAR);
      }
      intCurrentPosition_300MPH = seq_Tips300MPH.GetCurrentPosition();
      intEndPosition_300MPH = seq_Tips300MPH.GetCount();
      intCalculatedQuantity_300MPH = intEndPosition_300MPH - intCurrentPosition_300MPH;
      intCalculatedQuantity_300MPH = intCalculatedQuantity_300MPH + 1;
      _intConsumedTips300MPH = _intMaxSeqTips300MPHAfterEdit - intCalculatedQuantity_300MPH;
      TrcTrace12(Translate("CurrentPosition_300MPH : "), intCurrentPosition_300MPH, Translate(" - EndPosition_300MPH : "), intEndPosition_300MPH, Translate(" - Quantity_300MPH : "), intCalculatedQuantity_300MPH, Translate(" - _intMaxSeqTips300MPHAfterEdit : "), _intMaxSeqTips300MPHAfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTips300MPH : "), _intConsumedTips300MPH);
      if (intCalculatedQuantity_300MPH < i_intNumberOfTip300MPH_required)
      {
        _blnInsuffientTips = 1;
        if (i_intNumberOfTip300MPH_required > 480)
        {
          strText_Insufficient300sMPH = Translate("\nPlease load one full carrier of 300ul tips.  You will need to come back later to replenish.");
        }
        else
        {
          strText_Insufficient300sMPH = Translate("\nPlease load more 300ul tips for MPH.  You will need at least this many:  ");
          strText_Insufficient300sMPH = StrConcat2(strText_Insufficient300sMPH, i_intNumberOfTip300MPH_required);
        }
      }
      else
      {
        strText_Insufficient300sMPH = Translate(" No reload of this tip type necessary");
      }
    }
    if (bln_ProcessTip1000 == ASWGLOBAL::BOOL::TRUE)
    {
      if (i_blnAlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        TipCount::Edit2(seq_Tips1000, _strTipCounterNameTip1000, ML_STAR, 999);
        _intMaxSeqTips1000AfterEdit = seq_Tips1000.GetCount();
      }
      else
      {
        TipCount::Read2(seq_Tips1000, _strTipCounterNameTip1000, ML_STAR);
      }
      intCurrentPosition_1000 = seq_Tips1000.GetCurrentPosition();
      intEndPosition_1000 = seq_Tips1000.GetCount();
      intCalculatedQuantity_1000 = intEndPosition_1000 - intCurrentPosition_1000;
      intCalculatedQuantity_1000 = intCalculatedQuantity_1000 + 1;
      _intConsumedTips1000 = _intMaxSeqTips1000AfterEdit - intCalculatedQuantity_1000;
      if (_intConsumedTips1000 < 0)
      {
        _intConsumedTips1000 = 0;
      }
      TrcTrace12(Translate("CurrentPosition_1000 : "), intCurrentPosition_1000, Translate(" - EndPosition_1000 : "), intEndPosition_1000, Translate(" - Quantity_1000 : "), intCalculatedQuantity_1000, Translate(" - _intMaxSeqTips1000AfterEdit : "), _intMaxSeqTips1000AfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTips1000 : "), _intConsumedTips1000);
      if (intCalculatedQuantity_1000 < i_intNumberOfTip1000_required)
      {
        _blnInsuffientTips = 1;
        if (i_intNumberOfTip1000_required > 120)
        {
          strText_Insufficient1000s = Translate("\nPlease load two full racks of 1000ul tips.  You will need to come back later to replenish.");
        }
        else
        {
          strText_Insufficient1000s = Translate("\nPlease load more 1000ul tips.  You will need at least this many:  ");
          strText_Insufficient1000s = StrConcat2(strText_Insufficient1000s, i_intNumberOfTip1000_required);
        }
      }
      else
      {
        strText_Insufficient1000s = Translate(" No reload of this tip type necessary");
      }
    }
    if (_blnInsuffientTips == 1)
    {
      if (bln_ProcessTip50 == ASWGLOBAL::BOOL::TRUE)
      {
        if (i_intNumberOfTip50_required > 960)
        {
          bln_scheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (bln_ProcessTip300 == ASWGLOBAL::BOOL::TRUE)
      {
        if (i_intNumberOfTip300_required > 960)
        {
          bln_scheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (bln_ProcessTip300MPH == ASWGLOBAL::BOOL::TRUE)
      {
        if (i_intNumberOfTip300MPH_required > 480)
        {
          bln_scheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (bln_ProcessTip1000 == ASWGLOBAL::BOOL::TRUE)
      {
        if (i_intNumberOfTip1000_required > 192)
        {
          bln_scheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (bln_scheduleTipReloadDuringProcess == ASWGLOBAL::BOOL::TRUE)
      {
        customDialog_47.InitCustomDialog("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");
        customDialog_47.SetCustomDialogProperty( "textBlock1.Text", strText_Insufficient50s );
        customDialog_47.SetCustomDialogProperty( "textBlock2.Text", strText_Insufficient300s );
        customDialog_47.SetCustomDialogProperty( "textBlock3.Text", strText_Insufficient1000s );
        customDialog_47.SetCustomDialogProperty( "textBlock6.Text", strText_Insufficient300sMPH );
        customDialog_47.ShowCustomDialog();
        retValueDialog = customDialog_47.GetCustomDialogProperty( "ReturnValue" );
        strText_Insufficient50s = Translate(" No reload of this tip type necessary");
        strText_Insufficient300s = Translate(" No reload of this tip type necessary");
        strText_Insufficient300sMPH = Translate(" No reload of this tip type necessary");
        strText_Insufficient1000s = Translate(" No reload of this tip type necessary");
        bln_scheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::FALSE;
        _blnInsuffientTips = ASWGLOBAL::BOOL::FALSE;
      }
      else
      {
        blnReloadAllTipTypes = ASWGLOBAL::BOOL::FALSE;
        customDialog_48.InitCustomDialog("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");
        customDialog_48.SetCustomDialogProperty( "textBlock1.Text", strText_Insufficient50s );
        customDialog_48.SetCustomDialogProperty( "textBlock2.Text", strText_Insufficient300s );
        customDialog_48.SetCustomDialogProperty( "textBlock3.Text", strText_Insufficient1000s );
        customDialog_48.SetCustomDialogProperty( "textBlock5.Text", strText_Insufficient300sMPH );
        customDialog_48.ShowCustomDialog();
        retValueDialog = customDialog_48.GetCustomDialogProperty( "ReturnValue" );
        blnReloadAllTipTypes = customDialog_48.GetCustomDialogProperty( "checkBox1.IsChecked" );
      }
      if (retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
      }
      if (blnReloadAllTipTypes == ASWGLOBAL::BOOL::TRUE)
      {
        strText_Insufficient50s = Translate(" Preventive reload of this tip type necessary");
        strText_Insufficient300s = Translate(" Preventive reload of this tip type necessary");
        strText_Insufficient300sMPH = Translate(" Preventive reload of this tip type necessary");
        if(0){
          strText_Insufficient1000s = Translate(" Preventive reload of this tip type necessary");
        }
      }
      if (strText_Insufficient50s != " No reload of this tip type necessary")
      {
        _intConsumedTips50BeforeRelaodTips = _intConsumedTips50;
        TipCount::Edit2(seq_Tips50, Translate("NGSStarTip_50F_Counter"), ML_STAR, 999);
        _intMaxSeqTips50AfterEdit = seq_Tips50.GetCount();
      }
      if (strText_Insufficient300s != " No reload of this tip type necessary")
      {
        _intConsumedTips300BeforeRelaodTips = _intConsumedTips300;
        TipCount::Edit2(seq_Tips300, Translate("NGSStarTip_SVF_Counter"), ML_STAR, 999);
        _intMaxSeqTips300AfterEdit = seq_Tips300.GetCount();
      }
      if (strText_Insufficient300sMPH != " No reload of this tip type necessary")
      {
        _intConsumedTips300MPHBeforeRelaodTips = _intConsumedTips300MPH;
        TipCount::Edit2(seq_Tips300MPH, Translate("NGSStarTip_SVFMPH_Counter"), ML_STAR, 999);
        _intMaxSeqTips300MPHAfterEdit = seq_Tips300MPH.GetCount();
      }
      if (strText_Insufficient1000s != " No reload of this tip type necessary")
      {
        _intConsumedTips1000BeforeRelaodTips = _intConsumedTips1000;
        TipCount::Edit2(seq_Tips1000, Translate("NGSStarTip_HVF_Counter"), ML_STAR, 999);
        _intMaxSeqTips1000AfterEdit = seq_Tips1000.GetCount();
      }
      _blnInsuffientTips = ASWGLOBAL::BOOL::FALSE;
    }
    _DATA_TipAndTimeConsumption(i_blnShowGUITipAndTimeCalculation);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_TipCounterRead V2<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _DATA_TipAndTimeConsumption( variable i_blnShowDialog ) void {
    private dialog customDialog_49;
    private variable strElapsedTimeOfProccessTimer;
    private variable fltElapsedTimeOfProccessTimer;
    private variable retValueDialog;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: DATA_TipAndTimeConsumption <<<<<<<<<<"));
    Trace ("Consumed 1000ul filter tips before reload of tips :  ", _intConsumedTips1000BeforeRelaodTips);
    Trace ("Consumed 300ul filter tips before reload of tips  :  ", _intConsumedTips300BeforeRelaodTips);
    Trace ("Consumed 300ul MPH  tips before reload of tips    :  ", _intConsumedTips300MPHBeforeRelaodTips);
    Trace ("Consumed 50ul filter tips before reload of tips   :  ", _intConsumedTips50BeforeRelaodTips);
    Trace (" Consumed 1000ul filter tips :  ", _intConsumedTips1000);
    Trace (" Consumed 300ul filter tips  :  ", _intConsumedTips300);
    Trace (" Consumed 300ul MPH  tips    :  ", _intConsumedTips300MPH);
    Trace (" Consumed 50ul filter tips   :  ", _intConsumedTips50);
    // Calculate consumed tips
    _intTotalConsumedTips1000  = _intConsumedTips1000 + _intConsumedTips1000BeforeRelaodTips;
    _intTotalConsumedTips300  = _intConsumedTips300 + _intConsumedTips300BeforeRelaodTips;
    _intTotalConsumedTips300MPH  = _intConsumedTips300MPH + _intConsumedTips300MPHBeforeRelaodTips;
    _intTotalConsumedTips50  = _intConsumedTips50 + _intConsumedTips50BeforeRelaodTips;
    Trace (" --> Total consumed 1000ul filter tips :  ", _intTotalConsumedTips1000);
    Trace (" --> Total consumed 300ul filter tips  :  ", _intTotalConsumedTips300);
    Trace (" --> Total consumed 300ul MPH  tips    :  ", _intTotalConsumedTips300MPH);
    Trace (" --> Total consumed 50ul filter tips   :  ", _intTotalConsumedTips50);
    fltElapsedTimeOfProccessTimer = ProccessTimer.GetElapsedTime();
    if (fltElapsedTimeOfProccessTimer > 60)
    {
      fltElapsedTimeOfProccessTimer = fltElapsedTimeOfProccessTimer / (60 * 1.0);
      strElapsedTimeOfProccessTimer = StrFStr(fltElapsedTimeOfProccessTimer);
      strElapsedTimeOfProccessTimer = StrLeft(strElapsedTimeOfProccessTimer, 4);
      strElapsedTimeOfProccessTimer = StrConcat2(strElapsedTimeOfProccessTimer, Translate(" minutes."));
      if (fltElapsedTimeOfProccessTimer > 600)
      {
        fltElapsedTimeOfProccessTimer = fltElapsedTimeOfProccessTimer / (60 * 1.0);
        strElapsedTimeOfProccessTimer = StrFStr(fltElapsedTimeOfProccessTimer);
        strElapsedTimeOfProccessTimer = StrLeft(strElapsedTimeOfProccessTimer, 4);
        strElapsedTimeOfProccessTimer = StrConcat2(strElapsedTimeOfProccessTimer, Translate(" hours."));
      }
    }
    else
    {
      strElapsedTimeOfProccessTimer = StrFStr(fltElapsedTimeOfProccessTimer);
      strElapsedTimeOfProccessTimer = StrLeft(strElapsedTimeOfProccessTimer, 4);
      strElapsedTimeOfProccessTimer = StrConcat2(strElapsedTimeOfProccessTimer, Translate(" seconds."));
    }
    Trace ("Elapsed time in seconds:  ", fltElapsedTimeOfProccessTimer);
    Trace ("Elapsed time formatted:  ", strElapsedTimeOfProccessTimer);
    if (_intTotalConsumedTips50 < 0)
    {
      _intTotalConsumedTips50 = 0;
    }
    if (_intTotalConsumedTips300 < 0)
    {
      _intTotalConsumedTips300 = 0;
    }
    if (_intTotalConsumedTips300MPH < 0)
    {
      _intTotalConsumedTips300MPH = 0;
    }
    if (_intTotalConsumedTips1000 < 0)
    {
      _intTotalConsumedTips1000 = 0;
    }
    if (i_blnShowDialog == ASWGLOBAL::BOOL::TRUE)
    {
      customDialog_49.InitCustomDialog("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");
      customDialog_49.SetCustomDialogProperty( "textBox1.Text", _intTotalConsumedTips1000 );
      customDialog_49.SetCustomDialogProperty( "textBox2.Text", _intTotalConsumedTips300 );
      customDialog_49.SetCustomDialogProperty( "textBox3.Text", _intTotalConsumedTips50 );
      customDialog_49.SetCustomDialogProperty( "textBox4.Text", strElapsedTimeOfProccessTimer );
      customDialog_49.SetCustomDialogProperty( "textBox5.Text", _intTotalConsumedTips300MPH );
      customDialog_49.ShowCustomDialog();
      retValueDialog = customDialog_49.GetCustomDialogProperty( "ReturnValue" );
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_TipAndTimeConsumption <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_Reagent_SVFT_MPHSingleDispenseFromPlateToPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intNumberOfSamples, variable i_fltMixVolumeAfterDispense, variable i_intMixCycles, variable i_blnUpdateInformationIntoReporFile ) void {
    private dialog customDialog_50;
    private dialog customDialog_51;
    private variable strCurrentDispenseMode;
    private variable intCurrentDispenseMode;
    private variable intCurrentTipType;
    private variable strStepReturnValueDispense;
    private variable strStepReturnValueAspiration;
    private variable retValueDialog;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_Reagent_SVFT_MPHSingleDispenseFromPlateToPlate <<<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("PIP_Reagent_SVFT_MPHSingleDispenseFromPlateToPlate"), i_blnUpdateInformationIntoReporFile);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
      _DATA_PlausibilityCheckVolume(i_fltVolume, intCurrentTipType);
      if (intCurrentDispenseMode == 2)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (intCurrentDispenseMode == 4)
        {
          strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (strCurrentDispenseMode == "Empty")
      {
        SeqResetSequenceIndexes(i_seqAspirationPosition);
        i_seqAspirationPosition.SetCurrentPosition(1);
        i_seqAspirationPosition.SetCount(96);
        TrcTraceSequence(i_seqAspirationPosition);
        if (intCurrentTipType == 1)
        {
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            	strStepReturnValueAspiration = arrRetValues[2];
          }
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	strStepReturnValueDispense = arrRetValues[2];
          }
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
          DATA_TipCounterWrite(ML_STAR);
          i_seqAspirationPosition.SetCount(i_intNumberOfSamples);
          _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReportMPH(strStepReturnValueAspiration, strStepReturnValueDispense, i_seqAspirationPosition, i_seqDispensePosition, ASWGLOBAL::BOOL::TRUE);
        }
        else
        {
          MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
          customDialog_50.InitCustomDialog("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");
          customDialog_50.ShowCustomDialog();
          retValueDialog = customDialog_50.GetCustomDialogProperty( "ReturnValue" );
          abort;
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        customDialog_51.InitCustomDialog("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");
        customDialog_51.ShowCustomDialog();
        retValueDialog = customDialog_51.GetCustomDialogProperty( "ReturnValue" );
        abort;
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_Reagent_SVFT_MPHSingleDispenseFromPlateToPlate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _HHS_Shake( variable i_intHHS, variable i_intSpeed, variable i_intShakingDuration ) void {
    private variable intCheckForEarlyStop;
    private variable fltActualShakingDurationHHS;
    private timer Shaking;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  HHS_Shake command during processes smt<<<<<<<<<<"));
    Trace ("***** Now shaking on HHS", i_intHHS, " at ", i_intSpeed, "rpm for ", i_intShakingDuration, "seconds...");
    if (_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      HSLHamHeaterShaker::StartShaker(i_intHHS, i_intSpeed);
      if( 0 == Shaking.SetTimer(i_intShakingDuration) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      intCheckForEarlyStop = Shaking.WaitTimer(hslTrue, hslTrue);
      if (0 == intCheckForEarlyStop)
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if (intCheckForEarlyStop == 3)
      {
        MECC::TraceComment(Translate("***** WARNING!  The shaking was stopped prematurely by the operator! *****"));
      }
      fltActualShakingDurationHHS = Shaking.GetElapsedTime();
      Trace ("***** Actual Shaking Duration (seconds):  ", fltActualShakingDurationHHS);
      HSLHamHeaterShaker::StopShaker(i_intHHS);
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - HHS SHAKE simulated"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  HHS_Shake command during processes smt<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function Process_SizeSelection( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, variable i_fltVolumeBeadsFirstSeparation, variable i_fltVolumeBeadsSecondSeparation, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMixing, sequence & i_seqPositionHHS, variable i_intShakerDevice, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationResuspendCleanedLibrary, sequence & i_seqAspirationPositionEthanol, variable i_strLiquidClassEthanol, variable i_intNumberOfEthanolWashingLoops, sequence & i_seqAspirationPositionResuspensionBuffer, variable i_fltVolumeResuspensionBuffer, variable i_strLiquidClassResuspensionBuffer, sequence & i_seqMagneticStandPosition, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver, sequence & i_seqLiquidWaste, sequence & i_seqTransferPositionNewMidiPlate, sequence & i_trpPositionMIDIWaste, variable i_strLiquidClassNameTransfer2, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable intLoopCounterEthanolWashingCycles;
    private variable intReducedAirDryingTimer;
    private variable strConcatMessageASWStatusWindow;
    private variable fltVolumeTrackingEthanolTrough;
    private variable strReadCurrentBarcode;
    private timer OverdryingTimerAirDryingEthanol;
    private timer TimerIncubationAvoidingBeadCarryOverAtMagneticStand;
    private timer TimerIncubationAfterResuspendation;
    private variable intLoopCounterSizeSelectionCycle;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Process_SizeSelection <<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("Process_SizeSelection"), i_blnUpdateInformationIntoReporFile);
    AswStatusDialog::AppendText(Translate("Process_SizeSelection"));
    AswStatusDialog::AppendText(Translate("1. transfer beads to HHS position"));
    {
      for(intLoopCounterSizeSelectionCycle = 0; intLoopCounterSizeSelectionCycle < 2;)
      {
        intLoopCounterSizeSelectionCycle = intLoopCounterSizeSelectionCycle + 1;
        strConcatMessageASWStatusWindow = StrConcat2(Translate("... magnetic size selection cycle number "), intLoopCounterSizeSelectionCycle);
        AswStatusDialog::AppendText(strConcatMessageASWStatusWindow);
        if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          if (intLoopCounterSizeSelectionCycle == 1)
          {
            PIP_BeadsFromTubesOrTroughToPlate(ML_STAR, i_seqAspirationPositionBeads, i_seqPositionHHS, i_fltVolumeBeadsFirstSeparation, i_strLiquidClassBeads, i_strLiquidClassBeadsMixing, ASWGLOBAL::BOOL::TRUE, i_seqMixPositionBeads, ASWGLOBAL::BOOL::FALSE, i_blnUpdateInformationIntoReporFile);
          }
          else
          {
            AswStatusDialog::AppendText(Translate("5. transfer beads to HHS position"));
            PIP_BeadsFromTubesOrTroughToPlate(ML_STAR, i_seqAspirationPositionBeads, i_seqPositionHHS, i_fltVolumeBeadsSecondSeparation, i_strLiquidClassBeads, i_strLiquidClassBeadsMixing, ASWGLOBAL::BOOL::TRUE, i_seqMixPositionBeads, ASWGLOBAL::BOOL::FALSE, i_blnUpdateInformationIntoReporFile);
          }
        }
        if (intLoopCounterSizeSelectionCycle == 1)
        {
          AswStatusDialog::AppendText(Translate("2. shake bead sample mix"));
        }
        else
        {
          AswStatusDialog::AppendText(Translate("6. shake bead sample mix"));
        }
        _HHS_Shake(i_intShakerDevice, i_intShakerRPMBeadSampleMixing, i_intShakerDurationBeadSampleMixing);
        if (intLoopCounterSizeSelectionCycle == 1)
        {
          AswStatusDialog::AppendText(Translate("3. incubation bead sample mix before magnetic separation"));
        }
        else
        {
          AswStatusDialog::AppendText(Translate("7. incubation bead sample mix before magnetic separation"));
        }
        DATA_IncubationTimer(ProccessTimer, i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation);
        Trp_MIDI(ML_STAR, i_seqPositionHHS, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, strReadCurrentBarcode, i_blnUpdateInformationIntoReporFile);
        if (intLoopCounterSizeSelectionCycle == 1)
        {
          AswStatusDialog::AppendText(Translate("4. Magnetic separation step 1 and transfering Supernatant "));
        }
        else
        {
          AswStatusDialog::AppendText(Translate("8. Magnetic separation step 2 and discarding supernatant  "));
        }
        DATA_IncubationTimer(ProccessTimer, i_intTimeForSeparationAtMagneticStand);
        if (intLoopCounterSizeSelectionCycle == 1)
        {
          AswStatusDialog::AppendText(Translate("....transfering supernatant"));
          if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
          {
            PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, i_seqMagneticStandPosition, i_seqTransferPositionNewMidiPlate, 250, i_strLiquidClassBeads, i_strLiquidClassNameTransfer2, i_blnUpdateInformationIntoReporFile);
            Trp_MIDI(ML_STAR, i_seqMagneticStandPosition, i_trpPositionMIDIWaste, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, strReadCurrentBarcode, i_blnUpdateInformationIntoReporFile);
            Trp_MIDI(ML_STAR, i_seqTransferPositionNewMidiPlate, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, strReadCurrentBarcode, i_blnUpdateInformationIntoReporFile);
          }
        }
        else
        {
          AswStatusDialog::AppendText(Translate("....discarding supernatant"));
          if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
          {
            PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, i_seqMagneticStandPosition, i_seqLiquidWaste, 250, i_strLiquidClassBeads, i_strLiquidClassNameTransfer2, i_blnUpdateInformationIntoReporFile);
          }
        }
      }
    }
    AswStatusDialog::AppendText(Translate("9. Loop over washing steps using Ethanol "));
    {
      for(intLoopCounterEthanolWashingCycles = 0; intLoopCounterEthanolWashingCycles < i_intNumberOfEthanolWashingLoops;)
      {
        intLoopCounterEthanolWashingCycles = intLoopCounterEthanolWashingCycles + 1;
        AswStatusDialog::AppendText(Translate("....adding Ethanol"));
        if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_EtOH_HVFTMultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPositionEthanol, i_seqMagneticStandPosition, i_strLiquidClassEthanol, fltVolumeTrackingEthanolTrough, i_blnUpdateInformationIntoReporFile);
        }
        AswStatusDialog::AppendText(Translate("....discarding Ethanol"));
        DATA_OverdryingProtection(OverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, ASWGLOBAL::BOOL::TRUE, intReducedAirDryingTimer);
        if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, i_seqMagneticStandPosition, i_seqLiquidWaste, 210, Translate("StandardVolumeFilter_EtOH_DispenseJet_Empty"), i_strLiquidClassNameTransfer2, i_blnUpdateInformationIntoReporFile);
        }
      }
    }
    AswStatusDialog::AppendText(Translate("....incubation air drying Ethanol"));
    AswStatusDialog::AppendText(Translate("10. incubation bead air drying at magnetic stand"));
    DATA_OverdryingProtection(OverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, ASWGLOBAL::BOOL::FALSE, intReducedAirDryingTimer);
    DATA_IncubationTimer(OverdryingTimerAirDryingEthanol, intReducedAirDryingTimer);
    Trp_MIDI(ML_STAR, i_seqMagneticStandPosition, i_seqPositionHHS, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, strReadCurrentBarcode, i_blnUpdateInformationIntoReporFile);
    AswStatusDialog::AppendText(Translate("11. transfer resuspension buffer  "));
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionResuspensionBuffer, i_seqPositionHHS, i_fltVolumeResuspensionBuffer, i_strLiquidClassResuspensionBuffer, ASWGLOBAL::BOOL::TRUE, 0, i_fltVolumeResuspensionBuffer, ASWGLOBAL::BOOL::FALSE, 0, i_blnUpdateInformationIntoReporFile);
    }
    AswStatusDialog::AppendText(Translate("12. shake resuspend cleaned library"));
    _HHS_Shake(i_intShakerDevice, i_intShakerRPMResuspendCleanedLibrary, i_intShakerDurationResuspendCleanedLibrary);
    AswStatusDialog::AppendText(Translate("13. incubation bead sample mix after resupending cleaned size selected library"));
    DATA_IncubationTimer(TimerIncubationAfterResuspendation, i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary);
    Trp_MIDI(ML_STAR, i_seqPositionHHS, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, strReadCurrentBarcode, i_blnUpdateInformationIntoReporFile);
    AswStatusDialog::AppendText(Translate("14. incubation at magnetic stand to avoid bead carryover"));
    DATA_IncubationTimer(TimerIncubationAvoidingBeadCarryOverAtMagneticStand, i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: Process_SizeSelection <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _DATA_CalculateAndDefineBatchProcessCleanUp( variable i_intNumberOfColumnsWithinOneBatch, variable i_blnActivateBatchProcessForScaleUp, sequence & i_seqMagneticStandPosition, sequence & o_arrSeqMagneticStandPositionBatchwiseSorted[], variable & o_intNumberOfCalculatedBatchesToBeProcessed ) void {
    private variable intInitialNumberOfColumsToBeProcessed;
    private variable intLoopCounterBatch;
    private variable strLabwareIDOfCurrentSequnence;
    private variable strPositionIDOfCurrentSequence;
    private variable intInnerLoopCountingSequencesItems;
    private sequence seqIntermediateSequencePerBatch;
    private sequence seqBatch2;
    private sequence seqBatch3;
    private sequence seqBatch4;
    private sequence seqBatch5;
    private sequence seqBatch6;
    private sequence seqBatch7;
    private sequence seqBatch8;
    private sequence seqBatch9;
    private sequence seqBatch10;
    private sequence seqBatch11;
    private sequence seqBatch12;
    private sequence seqBatch1;
    private variable intGetEndPositionOfSequence;
    private dialog dialogHandle_52;
    private variable intSequenceItemsPerBatch;
    private variable intIncompletefColumsToBeProcessed;
    private variable o_intNumberOfIncompleteBatchesToBeProcessed;
    o_arrSeqMagneticStandPositionBatchwiseSorted.SetSize( 0);
    o_intNumberOfCalculatedBatchesToBeProcessed = 0;
    o_arrSeqMagneticStandPositionBatchwiseSorted.SetSize(0);
    TrcTraceSequence(i_seqMagneticStandPosition);
    intGetEndPositionOfSequence = i_seqMagneticStandPosition.GetCount();
    intInitialNumberOfColumsToBeProcessed = intGetEndPositionOfSequence / 8;
    intIncompletefColumsToBeProcessed = intGetEndPositionOfSequence % 8;
    if (intIncompletefColumsToBeProcessed > 0)
    {
      intInitialNumberOfColumsToBeProcessed = intInitialNumberOfColumsToBeProcessed + 1;
    }
    o_intNumberOfCalculatedBatchesToBeProcessed = intInitialNumberOfColumsToBeProcessed / i_intNumberOfColumnsWithinOneBatch;
    o_intNumberOfIncompleteBatchesToBeProcessed = intInitialNumberOfColumsToBeProcessed % i_intNumberOfColumnsWithinOneBatch;
    if (o_intNumberOfIncompleteBatchesToBeProcessed > 0)
    {
      o_intNumberOfCalculatedBatchesToBeProcessed = o_intNumberOfCalculatedBatchesToBeProcessed + 1;
    }
    intSequenceItemsPerBatch = i_intNumberOfColumnsWithinOneBatch * 8;
    if(0){
      dialogHandle_52.SetOutput(Translate("i_intNumberOfColumnsWithinOneBatch : "), i_intNumberOfColumnsWithinOneBatch, "\n", Translate("intInitialNumberOfColumsToBeProcessed : "), intInitialNumberOfColumsToBeProcessed, "\n", Translate("o_intNumberOfCalculatedBatchesToBeProcessed : "), o_intNumberOfCalculatedBatchesToBeProcessed, "\n", Translate("i_blnActivateBatchProcessForScaleUp : "), i_blnActivateBatchProcessForScaleUp, "\n", Translate("intGetEndPositionOfSequence : "), intGetEndPositionOfSequence, "\n", Translate("intSequenceItemsPerBatch : "), intSequenceItemsPerBatch, "\n");
      dialogHandle_52.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (i_intNumberOfColumnsWithinOneBatch >= intInitialNumberOfColumsToBeProcessed)
    {
      o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(i_seqMagneticStandPosition);
    }
    else
    {
      if (i_blnActivateBatchProcessForScaleUp == ASWGLOBAL::BOOL::FALSE)
      {
        o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(i_seqMagneticStandPosition);
      }
      else
      {
        {
          for(intLoopCounterBatch = 0; intLoopCounterBatch < o_intNumberOfCalculatedBatchesToBeProcessed;)
          {
            intLoopCounterBatch = intLoopCounterBatch + 1;
            SeqRemoveAll(seqIntermediateSequencePerBatch);
            {
              for(intInnerLoopCountingSequencesItems = 0; intInnerLoopCountingSequencesItems < intSequenceItemsPerBatch;)
              {
                intInnerLoopCountingSequencesItems = intInnerLoopCountingSequencesItems + 1;
                strLabwareIDOfCurrentSequnence = SeqGetLabwareId(i_seqMagneticStandPosition);
                strPositionIDOfCurrentSequence = SeqGetPositionId(i_seqMagneticStandPosition);
                if (strLabwareIDOfCurrentSequnence != "")
                {
                  SeqAdd(seqIntermediateSequencePerBatch, strLabwareIDOfCurrentSequnence, strPositionIDOfCurrentSequence);
                }
                SeqIncrement(i_seqMagneticStandPosition, 1);
              }
            }
            seqIntermediateSequencePerBatch.SetCurrentPosition(1);
            if (intLoopCounterBatch == 1)
            {
              SeqCopySequence(seqBatch1, seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(seqBatch1);
            }
            if (intLoopCounterBatch == 2)
            {
              SeqCopySequence(seqBatch2, seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(seqBatch2);
            }
            if (intLoopCounterBatch == 3)
            {
              SeqCopySequence(seqBatch3, seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(seqBatch3);
            }
            if (intLoopCounterBatch == 4)
            {
              SeqCopySequence(seqBatch4, seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(seqBatch4);
            }
            if (intLoopCounterBatch == 5)
            {
              SeqCopySequence(seqBatch5, seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(seqBatch5);
            }
            if (intLoopCounterBatch == 6)
            {
              SeqCopySequence(seqBatch6, seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(seqBatch6);
            }
            if (intLoopCounterBatch == 7)
            {
              SeqCopySequence(seqBatch7, seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(seqBatch7);
            }
            if (intLoopCounterBatch == 8)
            {
              SeqCopySequence(seqBatch8, seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(seqBatch8);
            }
            if (intLoopCounterBatch == 9)
            {
              SeqCopySequence(seqBatch9, seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(seqBatch9);
            }
            if (intLoopCounterBatch == 10)
            {
              SeqCopySequence(seqBatch10, seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(seqBatch10);
            }
            if (intLoopCounterBatch == 11)
            {
              SeqCopySequence(seqBatch11, seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(seqBatch11);
            }
            if (intLoopCounterBatch == 12)
            {
              SeqCopySequence(seqBatch12, seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(seqBatch12);
            }
          }
        }
        i_seqMagneticStandPosition.SetCurrentPosition(1);
      }
    }
  }

  function Process_CleanUp( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, sequence & i_seqPositionHHS, sequence & i_seqAspirationPositionEthanol, sequence & i_seqMagneticStandPosition, sequence & i_seqLiquidWaste, sequence & i_seqAspirationPositionResuspensionBuffer, variable i_fltVolumeBeads, variable i_fltVolumeEthanol, variable i_fltVolumeResuspensionBuffer, variable i_fltVolumeSupernatantToWaste, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMixing, variable i_strLiquidClassEthanol, variable i_strLiquidClassResuspensionBuffer, variable i_strLiquidClassSupernatantToWaste, variable i_strLiquidClassEthanolToWaste, variable i_strLiquidClassEthanol2ndAspirationToWaste, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerDurationResuspendCleanedLibrary, variable i_intNumberOfColumnsWithinOneBatch, variable i_intShakerDevice, variable i_blnActivateBatchProcessForScaleUp, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver, variable i_blnUpdateInformationIntoReporFile ) void {
    private sequence arrSequenceBatchProcessingCleanUp[];
    private variable intReducedAirDryingTimer;
    private variable intNumberOfCalculatedBatchesToBeProcessed;
    private variable fltVolumeTrackingEthanolTrough;
    private variable strBatchInformation;
    private variable strReadCurrentBarcode;
    private variable intBatchCounter;
    private sequence seqCurrentIntermediateBatch;
    private timer OverdryingTimerAirDryingEthanol;
    private timer TimerIncubationAvoidingBeadCarryOverAtMagneticStand;
    private timer TimerIncubationAfterResuspendation;
    private variable strVolumeResuspensionBuffer;
    private variable strVolumeSupernatantToWaste;
    private variable strVolumeBeads;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Process_CleanUp <<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("Process_CleanUp"), i_blnUpdateInformationIntoReporFile);
    _DATA_CalculateAndDefineBatchProcessCleanUp(i_intNumberOfColumnsWithinOneBatch, i_blnActivateBatchProcessForScaleUp, i_seqMagneticStandPosition, arrSequenceBatchProcessingCleanUp, intNumberOfCalculatedBatchesToBeProcessed);
    REFORMATSTRING::ReformatStringFloatDecimalPoints(i_fltVolumeBeads, strVolumeBeads);
    strBatchInformation = StrConcat4(Translate("   Adding "), strVolumeBeads, Translate(" ul Beads "), Translate(""));
    AswStatusDialog::AppendText(strBatchInformation);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      PIP_BeadsFromTubesOrTroughToPlate(ML_STAR, i_seqAspirationPositionBeads, i_seqPositionHHS, i_fltVolumeBeads, i_strLiquidClassBeads, i_strLiquidClassBeadsMixing, ASWGLOBAL::BOOL::TRUE, i_seqMixPositionBeads, ASWGLOBAL::BOOL::FALSE, i_blnUpdateInformationIntoReporFile);
    }
    AswStatusDialog::AppendText(Translate("   Shaking MIDI on HHS"));
    _HHS_Shake(i_intShakerDevice, i_intShakerRPMBeadSampleMixing, i_intShakerDurationBeadSampleMixing);
    _HHS_Shake(i_intShakerDevice, 1000, 20);
    AswStatusDialog::AppendText(Translate("   Incubating MIDI at RT"));
    DATA_IncubationTimer(ProccessTimer, i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation);
    AswStatusDialog::AppendText(Translate("   Moving MIDI to magnet"));
    Trp_MIDI(ML_STAR, i_seqPositionHHS, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, strReadCurrentBarcode, i_blnUpdateInformationIntoReporFile);
    AswStatusDialog::AppendText(Translate("   Incubating MIDI on magnet"));
    DATA_IncubationTimer(ProccessTimer, i_intTimeForSeparationAtMagneticStand);
    REFORMATSTRING::ReformatStringFloatDecimalPoints(i_fltVolumeSupernatantToWaste, strVolumeSupernatantToWaste);
    strBatchInformation = StrConcat4(Translate("   Discarding "), strVolumeSupernatantToWaste, Translate(" ul Supernatant "), Translate(""));
    AswStatusDialog::AppendText(strBatchInformation);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, i_seqMagneticStandPosition, i_seqLiquidWaste, i_fltVolumeSupernatantToWaste, i_strLiquidClassSupernatantToWaste, i_strLiquidClassEthanol2ndAspirationToWaste, i_blnUpdateInformationIntoReporFile);
    }
    AswStatusDialog::AppendText(Translate("   Adding 200 ul Ethanol 80%"));
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      PIP_EtOH_HVFTMultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPositionEthanol, i_seqMagneticStandPosition, i_strLiquidClassEthanol, fltVolumeTrackingEthanolTrough, i_blnUpdateInformationIntoReporFile);
    }
    AswStatusDialog::AppendText(Translate("   Discarding Ethanol"));
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, i_seqMagneticStandPosition, i_seqLiquidWaste, 210, i_strLiquidClassEthanolToWaste, i_strLiquidClassEthanol2ndAspirationToWaste, i_blnUpdateInformationIntoReporFile);
    }
    AswStatusDialog::AppendText(Translate("   Adding 200 ul Ethanol 80%"));
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      PIP_EtOH_HVFTMultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPositionEthanol, i_seqMagneticStandPosition, i_strLiquidClassEthanol, fltVolumeTrackingEthanolTrough, i_blnUpdateInformationIntoReporFile);
    }
    SeqRemoveAll(seqCurrentIntermediateBatch);
    {
      for(intBatchCounter = 0; intBatchCounter < intNumberOfCalculatedBatchesToBeProcessed;)
      {
        intBatchCounter = intBatchCounter + 1;
        seqCurrentIntermediateBatch=arrSequenceBatchProcessingCleanUp.GetAt(intBatchCounter-1);
        AlignSequences(hslTrue, seqCurrentIntermediateBatch, 1, i_seqMagneticStandPosition, 1);
        seqCurrentIntermediateBatch.SetCurrentPosition(1);
        TrcTraceSequence(seqCurrentIntermediateBatch);
        strBatchInformation = StrConcat4(Translate("   Working with batch "), intBatchCounter, Translate(" of "), intNumberOfCalculatedBatchesToBeProcessed);
        AswStatusDialog::AppendText(strBatchInformation);
        DATA_OverdryingProtection(OverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, ASWGLOBAL::BOOL::TRUE, intReducedAirDryingTimer);
        AswStatusDialog::AppendText(Translate("   Discarding Ethanol"));
        if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, seqCurrentIntermediateBatch, i_seqLiquidWaste, 210, i_strLiquidClassEthanolToWaste, i_strLiquidClassEthanol2ndAspirationToWaste, i_blnUpdateInformationIntoReporFile);
        }
        AswStatusDialog::AppendText(Translate("   Incubating MIDI at RT (Beads air drying)"));
        seqCurrentIntermediateBatch.SetCurrentPosition(1);
        DATA_OverdryingProtection(OverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, ASWGLOBAL::BOOL::FALSE, intReducedAirDryingTimer);
        DATA_IncubationTimer(OverdryingTimerAirDryingEthanol, intReducedAirDryingTimer);
        REFORMATSTRING::ReformatStringFloatDecimalPoints(i_fltVolumeResuspensionBuffer, strVolumeResuspensionBuffer);
        strBatchInformation = StrConcat4(Translate("   Adding "), strVolumeResuspensionBuffer, Translate(" ul Elution Buffer"), Translate(""));
        AswStatusDialog::AppendText(strBatchInformation);
        if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionResuspensionBuffer, seqCurrentIntermediateBatch, i_fltVolumeResuspensionBuffer, i_strLiquidClassResuspensionBuffer, ASWGLOBAL::BOOL::TRUE, 0, i_fltVolumeResuspensionBuffer, 0.5, 0, i_blnUpdateInformationIntoReporFile);
        }
      }
    }
    AswStatusDialog::AppendText(Translate("   Moving MIDI to HHS"));
    Trp_MIDI(ML_STAR, i_seqMagneticStandPosition, i_seqPositionHHS, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, strReadCurrentBarcode, i_blnUpdateInformationIntoReporFile);
    AswStatusDialog::AppendText(Translate("   Shaking MIDI on HHS"));
    _HHS_Shake(i_intShakerDevice, i_intShakerRPMResuspendCleanedLibrary, i_intShakerDurationResuspendCleanedLibrary);
    _HHS_Shake(i_intShakerDevice, 1000, 20);
    AswStatusDialog::AppendText(Translate("   Incubating MIDI at RT"));
    DATA_IncubationTimer(TimerIncubationAfterResuspendation, i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary);
    AswStatusDialog::AppendText(Translate("   Moving MIDI to Magnet"));
    Trp_MIDI(ML_STAR, i_seqPositionHHS, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, strReadCurrentBarcode, i_blnUpdateInformationIntoReporFile);
    AswStatusDialog::AppendText(Translate("   Incubating MIDI on magnet"));
    DATA_IncubationTimer(TimerIncubationAvoidingBeadCarryOverAtMagneticStand, i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Process_CleanUp <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_UpdateInformationIntoReportFile( variable i_strInformationToUpdateReportList, variable i_blnUpdateInformationIntoReportFile ) void {
    private variable strEmptyString;
    private file NGSStarReportFile2;
    if (i_blnUpdateInformationIntoReportFile == ASWGLOBAL::BOOL::TRUE)
    {
      strEmptyString = Translate("");
      if(0){
        Trace ("Update Current information                :  ", i_strInformationToUpdateReportList);
      }
      NGSStarReportFile2.AddField("Date", i_strInformationToUpdateReportList, hslString, 255);
      NGSStarReportFile2.AddField("Time", strEmptyString, hslString, 255);
      NGSStarReportFile2.AddField("LabID Source", strEmptyString, hslString, 255);
      NGSStarReportFile2.AddField("PosID Source", strEmptyString, hslString, 255);
      NGSStarReportFile2.AddField("Transfer Volume", strEmptyString, hslString, 255);
      NGSStarReportFile2.AddField("LabID Target", strEmptyString, hslString, 255);
      NGSStarReportFile2.AddField("PosID Target", strEmptyString, hslString, 255);
      if( 0 == NGSStarReportFile2.Open(_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strFullPathReportFile, "HxMetEdCompCmd");
      }
      if( 0 == NGSStarReportFile2.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != NGSStarReportFile2.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      NGSStarReportFile2.RemoveFields();
    }
  }

  function PIP_BeadsFromTubesOrTroughToPlate_OLD( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolBeads, variable i_strLiquidClassNameTransfer, variable i_blnTipExchangeDuringTransfer, sequence seq_Mixing, variable i_blnMixWithSVFT, variable i_blnUpdateInformationIntoReporFile ) void {
    private variable strCurrentDispenseMode;
    private variable strLabwareID_Vial;
    private variable strTypeOfLabware;
    private variable strLabwareIDBeads;
    private variable fltTotalVolumeBeads;
    private variable fltMixVolumeBeadsVial1;
    private variable intNumberOfSamples;
    private variable intGetTotalOFSeqDispense;
    private variable fltVolumeBeadsFirst48Wells;
    private variable intNumberSamplesUpTo48;
    private variable fltMixVolumeBeadsVial2;
    private variable fltRemainingBeadVolume;
    private variable intVolumeMix;
    private variable intCurrentDispenseMode;
    private variable intNumberSamplesMoreThan48;
    private variable loopCounter1;
    private variable intPositionID_Vial_1;
    private variable intCurrentTipType;
    private variable loopCounter2;
    private variable intChannelPatternBeads;
    private variable intPositionID_Vial_2;
    private variable strStepReturnValueDispense;
    private variable strChannelPatternMixingStep;
    private variable strStepReturnValueAspiration;
    private variable arr_MixVols[];
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_BeadsFromTubesOrTroughToPlate <<<<<<<<<<"));
    DATA_UpdateInformationIntoReportFile(Translate("PIP_BeadsFromTubesOrTroughToPlate"), i_blnUpdateInformationIntoReporFile);
    if (_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, intCurrentTipType, intCurrentDispenseMode);
      _DATA_PlausibilityCheckVolume(i_fltVolBeads, intCurrentTipType);
      strLabwareIDBeads = SeqGetLabwareId(i_seqAspirationPosition);
      _DATA_InterpreteLabwareID(strLabwareIDBeads, strTypeOfLabware);
      intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (intCurrentDispenseMode == 2)
      {
        strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (intCurrentDispenseMode == 4)
        {
          strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (strCurrentDispenseMode == "Empty")
      {
        if (strTypeOfLabware == "tube")
        {
          fltTotalVolumeBeads = i_fltVolBeads * intNumberOfSamples;
          if (intNumberOfSamples > 48)
          {
            strChannelPatternMixingStep = Translate("11000000");
            fltVolumeBeadsFirst48Wells = i_fltVolBeads * 48;
            fltRemainingBeadVolume = fltTotalVolumeBeads - fltVolumeBeadsFirst48Wells;
            fltMixVolumeBeadsVial1 = fltVolumeBeadsFirst48Wells / (2 * 1.0);
            fltMixVolumeBeadsVial2 = fltRemainingBeadVolume / (2 * 1.0);
            if (fltMixVolumeBeadsVial1 > 1000)
            {
              fltMixVolumeBeadsVial1 = 1000;
            }
            if (fltMixVolumeBeadsVial2 > 1000)
            {
              fltMixVolumeBeadsVial2 = 1000;
            }
          }
          else
          {
            strChannelPatternMixingStep = Translate("10000000");
            fltMixVolumeBeadsVial1 = fltTotalVolumeBeads / (2 * 1.0);
            if (fltMixVolumeBeadsVial1 > 1000)
            {
              fltMixVolumeBeadsVial1 = 1000;
            }
          }
          Trace ("Volume per sample well:  ", i_fltVolBeads);
          Trace ("Mix volume, channel 1:  ", fltMixVolumeBeadsVial1);
          Trace ("Mix volume, channel 2:  ", fltMixVolumeBeadsVial2);
          arr_MixVols.SetSize(2);
          arr_MixVols.SetAt(1-1, fltMixVolumeBeadsVial1);
          arr_MixVols.SetAt(2-1, fltMixVolumeBeadsVial2);
          MECC::TraceComment(Translate("********* Premix in vial with 1 or 2 1ml Tips ***********"));
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          DATA_TipCounterWrite(ML_STAR);
          if (intNumberOfSamples > 48)
          {
            intNumberSamplesMoreThan48 = intNumberOfSamples - 48;
            intNumberSamplesUpTo48 = intNumberOfSamples - (2 * intNumberSamplesMoreThan48);
          }
          else
          {
            intNumberSamplesMoreThan48 = 0;
            intNumberSamplesUpTo48 = intNumberOfSamples;
          }
          strLabwareID_Vial = SeqGetLabwareId(i_seqAspirationPosition);
          intPositionID_Vial_1 = SeqGetPositionId(i_seqAspirationPosition);
          SeqIncrement(i_seqAspirationPosition, 1);
          intPositionID_Vial_2 = SeqGetPositionId(i_seqAspirationPosition);
          SeqRemoveAll(i_seqAspirationPosition);
          {
            for(loopCounter2 = 0; loopCounter2 < intNumberSamplesMoreThan48;)
            {
              loopCounter2 = loopCounter2 + 1;
              SeqAdd(i_seqAspirationPosition, strLabwareID_Vial, intPositionID_Vial_1);
              SeqAdd(i_seqAspirationPosition, strLabwareID_Vial, intPositionID_Vial_2);
            }
          }
          {
            for(loopCounter2 = 0; loopCounter2 < intNumberSamplesUpTo48;)
            {
              loopCounter2 = loopCounter2 + 1;
              SeqAdd(i_seqAspirationPosition, strLabwareID_Vial, intPositionID_Vial_1);
            }
          }
          i_seqAspirationPosition.SetCurrentPosition(1);
        }
        if (strTypeOfLabware == "trough")
        {
          intGetTotalOFSeqDispense = SeqGetTotal(i_seqDispensePosition);
          if (intGetTotalOFSeqDispense < 25)
          {
            intVolumeMix = 400;
          }
          if (intGetTotalOFSeqDispense > 25)
          {
            if (intGetTotalOFSeqDispense < 48)
            {
              intVolumeMix = 650;
            }
            else
            {
              intVolumeMix = 950;
            }
          }
          if (i_blnMixWithSVFT == ASWGLOBAL::BOOL::TRUE)
          {
            intVolumeMix = 280;
          }
          MECC::TraceComment(Translate("********* Premix in trough ***********\nRK: if more than 8 samples are processed, mix with 8 channels. Also different mixing heights\n"));
          if (intNumberOfSamples <= 8)
          {
            intChannelPatternBeads = Translate("11110000");
          }
          else
          {
            intChannelPatternBeads = Translate("11111111");
          }
          if (i_blnMixWithSVFT == ASWGLOBAL::BOOL::TRUE)
          {
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
            if (intNumberOfSamples <= 8)
            {
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            else
            {
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            DATA_TipCounterWrite(ML_STAR);
          }
          else
          {
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
            if (intNumberOfSamples <= 8)
            {
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            else
            {
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            DATA_TipCounterWrite(ML_STAR);
          }
        }
        MECC::TraceComment(Translate("********** Now pipetting beads to destination plate"));
        if (intCurrentTipType == 1)
        {
          {
            loopCounter1 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips300, 1, i_seqDispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            seq_Tips300.SetMax(seq_Tips300.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (intCurrentTipType == 5)
        {
          {
            loopCounter1 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips1000, 1, i_seqDispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            seq_Tips1000.SetMax(seq_Tips1000.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (intCurrentTipType == 23)
        {
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
          {
            loopCounter1 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, seq_Tips50, 1, i_seqDispensePosition, 1);
              loopCounter1 = loopCounter1 + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (loopCounter1 == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(strStepReturnValueAspiration, strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            seq_Tips50.SetMax(seq_Tips50.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        if (intCurrentTipType == 23)
        {
          if(0){
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
        }
      }
      if (strCurrentDispenseMode == "Part")
      {
        _PIP_HVFTMultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPosition, i_seqDispensePosition, i_fltVolBeads, i_strLiquidClassNameTransfer, i_blnUpdateInformationIntoReporFile);
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, i_seqAspirationPosition);
      {
        variable _FilterIdsArray_25[];
        variable _ColumnIdsArray_25[];
        variable _ColumnNamesArray_25[];
        variable _ExperimentsArray_25[];
        _FilterIdsArray_25.SetSize(0);
        _ColumnNamesArray_25.SetSize(14);
        _ColumnIdsArray_25.SetSize(14);
        _ColumnNamesArray_25.SetAt(0, "RecordId");
        _ColumnIdsArray_25.SetAt(0, 0);
        _ColumnNamesArray_25.SetAt(1, "TRackBC");
        _ColumnIdsArray_25.SetAt(1, 1);
        _ColumnNamesArray_25.SetAt(2, "TLabwareId");
        _ColumnIdsArray_25.SetAt(2, 2);
        _ColumnNamesArray_25.SetAt(3, "TPositionId");
        _ColumnIdsArray_25.SetAt(3, 3);
        _ColumnNamesArray_25.SetAt(4, "TPositionBC");
        _ColumnIdsArray_25.SetAt(4, 4);
        _ColumnNamesArray_25.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_25.SetAt(5, 5);
        _ColumnNamesArray_25.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_25.SetAt(6, 6);
        _ColumnNamesArray_25.SetAt(7, "TVolume");
        _ColumnIdsArray_25.SetAt(7, 7);
        _ColumnNamesArray_25.SetAt(8, "SRackBC");
        _ColumnIdsArray_25.SetAt(8, 8);
        _ColumnNamesArray_25.SetAt(9, "SLabwareId");
        _ColumnIdsArray_25.SetAt(9, 9);
        _ColumnNamesArray_25.SetAt(10, "SPositionId");
        _ColumnIdsArray_25.SetAt(10, 10);
        _ColumnNamesArray_25.SetAt(11, "SPositionBC");
        _ColumnIdsArray_25.SetAt(11, 11);
        _ColumnNamesArray_25.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_25.SetAt(12, 12);
        _ColumnNamesArray_25.SetAt(13, "UserName");
        _ColumnIdsArray_25.SetAt(13, 13);
        _ExperimentsArray_25.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqDispensePosition, 3, _FilterIdsArray_25, 0, _ColumnIdsArray_25, _ColumnNamesArray_25, _ExperimentsArray_25, "Beads_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_BeadsFromTubesOrTroughToPlate<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }
} // library namespace
