#pragma once
#include "HSLStrLib.hsl"
#include "HSLUtilLib2.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\MethodSpecificLibraries\\ArrayTools.hs_"
#include "HSLTrcLib.hsl"
#include "HSLAppsLib.hsl"
#include "HSLMthLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\MethodSpecificLibraries\\Tokenizer\\StrTokenize.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\MethodSpecificLibraries\\SequenceTools_V3\\SequenceInArrayTools.hs_"
#include "HSLSeqLib.hsl"
#include "ASWStandardDialogs\\ASWStandardDialogs.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\NGSStarProcesses.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\MethodSpecificLibraries\\Stack_Reducer\\StackReducer.hs_"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "ASWStandardDialogs\\ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLArrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace NGSSTARREADCONFIGFILE_V3 {
  variable _intNumberOfSamplesRequired;
  variable _strPathConfigFile;
  variable _intLastProcess;
  variable _intFirstProcess;
  variable _arrStrCarrierNameInConfigFile[];
  variable _arrLabwareIdOnDeck[];
  variable _arrPositions[];
  variable _arrDescriptions[];
  variable _arrQuantities[];
  variable _arrTopPicturesStrPaths[];
  variable _arrLoadableCarriers[];
  variable _arrDeckCarriersID[];
  variable _intNumberOf1000uLTips;
  variable _intNumberOf300uLTips;
  variable _intNumberOfHSPPlates;
  variable _intNumberOf50uLTips;
  variable _intNumberOfHamiltonComfortLids;
  variable _intNumberMIDIStack1;
  variable _intNumberMIDIStack2;
  variable _intNumberOfMIDIPlates;
  variable _intNumberMIDIStack3;
  variable _intNumberOfLoadableCarriers;
  variable _intNumberOf300uLTipsMPH;
  variable _arrCarrierIdForConfigFile[];
  variable _arrStrPathPictureCarrierInConfigFile[];
  variable _arrStrTopTextForCarriersInConfigFile[];
  variable _arrStrReagentNameToExport[];
  variable _arrFltTotalVolumePerSampleToExport[];
  variable _arrStrCarrierNameRequired[];
  variable _arrFltTotalVolumePerSampleRequired[];
  variable t_arr_NumberOfTipsPerProcess[];
  private function CalculateNumberOfTubesAndVolumePerTube_Rev2( variable i_str_ReagentName, variable i_int_NumberOfSamples, variable i_flt_VolumePerSample, variable i_flt_MaximumContainerVolume, variable i_flt_DeadVolumeLabware, variable i_flt_DeadVolumeReagent, variable & o_int_NumberOfContainersNeeded, variable & o_arr_VolumesPerContainer[], variable & o_arr_DescriptionForDialog[] ) void ;
  private function CalculatePercentages( variable i_ReferenceValue, variable i_ValueToEvaluate, variable i_Base100, variable & o_Base100ValueEvaluated ) void ;
  private function CalculateResourcesForDialog( variable i_strCarrierID, variable & i_arrProcessesToPerform[], variable i_intNumberOfSamples, variable i_switchDisplayDialog, variable i_strPathDialogPicture, variable i_strTopText, variable i_strBottomText, variable & o_arrPositions[], variable & o_arrQuantities[], variable & o_arrDescriptions[], variable & o_arrProcessID[], variable & o_arrLabwareType[] ) void ;
  private function CalculateTotalVolumeReagent( variable i_strReagentName, variable & o_fltTotalVolumeRequired, variable & o_fltTotalVolumeRequiredExcludingDeadVolume, variable & o_intNumberOfPositionsRequired, variable & o_arrStrPositionsFromFile[], variable & o_fltVolumePerSample, variable & o_arrFltVolumePerSample[], variable & o_fltTotalVolumePerSampleThisRun ) void ;
  private function CalculatedPositionsTubesAndVolumesForReagents( variable i_fltTotalVolumeRequired, variable i_intNumberOfTargetSamples, variable i_fltMaxVolumeLabware, variable i_fltDeadVolume, variable i_fltDeadVolumeReagent, variable i_fltVolumeForEachSample, variable i_blnRoundUp, variable & o_intNumberOfTubes, variable & o_fltTotalVolumeCalculatedIncludingDeadVolume, variable & o_fltTotalVolumeCalculatedExcludingDeadVolume, variable & o_arrPositions[], variable & o_arrIndependentVolumes[], variable i_blnEnableFullTrace ) void ;
  private function CreateArrayOfSequencesFromSequence( sequence & i_sequence, sequence & o_arrayOfSequences[] ) void ;
  private function Define_LabwareAssociation(  ) void ;
  function ReadConfigFile( device & ML_STAR, variable i_strPathConfigFile, variable & i_arrIntProcessToPerform[], variable i_intNumberOfSamples, variable i_indexFormat, variable & i_arrIndexID1[], variable & i_arrIndexID2[], variable & i_arrIndexPos1[], variable & i_arrIndexPos2[], variable i_blnSimulationMode, variable i_blnODTC, variable i_blnTEST_MODE_DisableLoadingCarrierCommand, sequence & o_arrSequenceToAspirate[], variable & o_arrFltVolumesPerSample[], variable & o_arrStrReagentNames[], sequence & o_arrSeqStackMIDI[], sequence & o_arrSeqStackHSP[], sequence & o_arrSeqStackComfortLid[], variable & o_arrNumberOfTipsPerProcess[] ) void ;
  private function ReformatStringFloatDecimalPoints( variable i_strValueToReformat, variable & o_strValueReformatted ) void ;
  function Return_ProcessIDs( variable i_strPathConfigFile, variable & o_arrStrProcessID[] ) void ;
  private function Return_Resources( variable i_strConfigFileFullPath, variable & i_arrProcessToPerform[] ) void ;
  private function _Abstract(  ) void ;
  private function _Loading( variable & i_arrColumnHeaders[], variable i_strTopText, variable i_strBottomText, variable i_strTopImageFilePath, variable i_intImageSize, variable & io_arrPositions[], variable & io_arrQuantities[], variable & io_arrDescriptions[] ) void ;
  private function _LoadingDialogAddRowWithData( variable i_strValue1, variable i_strValue2, variable i_strValue3 ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ARRAYTOOLS::_InitLibrary();
    STRTOKENIZE::_InitLibrary();
    SEQUENCEINARRAYTOOLS::_InitLibrary();
    NGSSTARPROCESSES::_InitLibrary();
    STACKREDUCER::_InitLibrary();
  }
  function _ExitLibrary() {
    ARRAYTOOLS::_ExitLibrary();
    STRTOKENIZE::_ExitLibrary();
    SEQUENCEINARRAYTOOLS::_ExitLibrary();
    NGSSTARPROCESSES::_ExitLibrary();
    STACKREDUCER::_ExitLibrary();
  }

  private function _Abstract(  ) void {
  }

  function Return_ProcessIDs( variable i_strPathConfigFile, variable & o_arrStrProcessID[] ) void {
    private variable fileNGSConfig_ProcessID;
    private variable loopCounter1;
    private file fileNGSConfig;
    private variable arrStrProcessIDs[];
    arrStrProcessIDs.SetSize(0);
    MECC::TraceComment(Translate("Extract_Processes from Config File"));
    fileNGSConfig.AddField("ProcessID", fileNGSConfig_ProcessID, hslString, 255);
    if( 0 == fileNGSConfig.Open(i_strPathConfigFile + " " + "Reagents$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strPathConfigFile, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (fileNGSConfig.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == fileNGSConfig.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        arrStrProcessIDs.AddAsLast(fileNGSConfig_ProcessID);
      }
    }
    if( 0 != fileNGSConfig.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileNGSConfig.RemoveFields();
    ARRAYTOOLS::get_distinct_from_array(arrStrProcessIDs, o_arrStrProcessID);
    Util2::Debug::TraceArray(Translate("<<< o_arrStrProcessID: "), o_arrStrProcessID);
  }

  private function CalculatedPositionsTubesAndVolumesForReagents( variable i_fltTotalVolumeRequired, variable i_intNumberOfTargetSamples, variable i_fltMaxVolumeLabware, variable i_fltDeadVolume, variable i_fltDeadVolumeReagent, variable i_fltVolumeForEachSample, variable i_blnRoundUp, variable & o_intNumberOfTubes, variable & o_fltTotalVolumeCalculatedIncludingDeadVolume, variable & o_fltTotalVolumeCalculatedExcludingDeadVolume, variable & o_arrPositions[], variable & o_arrIndependentVolumes[], variable i_blnEnableFullTrace ) void {
    private variable fltTotalDeadVolume;
    private variable intNumberOfSamples;
    private variable residualDivision;
    private variable fltTotalVolumeRequired;
    private variable fltAdditionalDeadVolume;
    private dialog dialogHandle_1;
    private variable fltDeadVolumePerSample;
    private variable fltVolumeForEachSampleIncludingDeadVolume;
    private variable intMaximumNumberOfSamplesPerVial;
    private variable intNumberOfTubes;
    private variable intNumberOfSamplesPerTube;
    private variable intResidualNumberOfSamplesPerTube;
    private variable loopCounter2;
    private variable intTempNumberOfSamplesPerTube;
    private variable arrNumberOfSamplesPerTube[];
    private variable fltTotalVolumePerTube;
    private variable intFinalNumberOfTubes;
    private variable loopCounter1;
    o_intNumberOfTubes = 0;
    o_fltTotalVolumeCalculatedIncludingDeadVolume = 0;
    o_fltTotalVolumeCalculatedExcludingDeadVolume = 0;
    TrcTrace(Translate(" ClaculatedPositionsTubesAndVolumesForReagents::::::::: i_intNumberOfTargetSamples: "), i_intNumberOfTargetSamples);
    if (i_intNumberOfTargetSamples == 0)
    {
      fltTotalVolumeRequired = i_fltTotalVolumeRequired;
      intNumberOfSamples = i_fltTotalVolumeRequired / i_fltVolumeForEachSample;
      residualDivision = i_fltTotalVolumeRequired % i_fltVolumeForEachSample;
      if (residualDivision != 0)
      {
        dialogHandle_1.SetOutput(Translate("Review input data: Unable to calculate the number of target wells. The input total volume and the volume of sample don't match"), "\n", Translate("i_fltTotalVolumeRequired: "), i_fltTotalVolumeRequired, "\n", Translate("i_fltVolumeForEachSample: "), i_fltVolumeForEachSample);
        dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }
    }
    else
    {
      fltTotalVolumeRequired = i_intNumberOfTargetSamples * i_fltVolumeForEachSample;
      o_fltTotalVolumeCalculatedExcludingDeadVolume = fltTotalVolumeRequired;
      intNumberOfSamples = i_intNumberOfTargetSamples;
    }
    if (i_blnEnableFullTrace == ASWGLOBAL::BOOL::TRUE)
    {
      TrcTrace(Translate(">>>>>>> i_fltVolumeForEachSample: "), i_fltVolumeForEachSample);
    }
    fltAdditionalDeadVolume = 0.0;
    fltDeadVolumePerSample = 0.0;
    fltVolumeForEachSampleIncludingDeadVolume = 0.0;
    intMaximumNumberOfSamplesPerVial = 0;
    intFinalNumberOfTubes = 1;
    intNumberOfTubes = 0;
    {
      loopCounter1 = 0;
      while (1 == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        i_fltDeadVolume = i_fltDeadVolume * intFinalNumberOfTubes;
        //Calculate Total dead volume per samples
        fltAdditionalDeadVolume = fltTotalVolumeRequired * i_fltDeadVolumeReagent;
        fltTotalDeadVolume = i_fltDeadVolume + fltAdditionalDeadVolume;
        fltDeadVolumePerSample = fltTotalDeadVolume / intNumberOfSamples;
        //Calculate Number of Samples Per Vial
        fltVolumeForEachSampleIncludingDeadVolume = i_fltVolumeForEachSample + fltDeadVolumePerSample;
        intMaximumNumberOfSamplesPerVial = i_fltMaxVolumeLabware/fltVolumeForEachSampleIncludingDeadVolume;
        if (i_blnEnableFullTrace == ASWGLOBAL::BOOL::TRUE)
        {
          TrcTrace(Translate(">>>>>>> fltTotalDeadVolume: "), fltTotalDeadVolume);
          TrcTrace(Translate(">>>>>>> fltVolumeForEachSampleIncludingDeadVolume: "), fltVolumeForEachSampleIncludingDeadVolume);
        }
        intMaximumNumberOfSamplesPerVial = MthFloor(intMaximumNumberOfSamplesPerVial);
        if (i_blnEnableFullTrace == ASWGLOBAL::BOOL::TRUE)
        {
          TrcTrace(Translate(">>>>>>> intMaximumNumberOfSamplesPerVial: "), intMaximumNumberOfSamplesPerVial);
        }
        intNumberOfTubes = intNumberOfSamples / (intMaximumNumberOfSamplesPerVial * 1.0);
        intNumberOfTubes = MthCeiling(intNumberOfTubes);
        if (i_blnEnableFullTrace == ASWGLOBAL::BOOL::TRUE)
        {
          TrcTrace(Translate(">>>>>>> intNumberOfTubes: "), intNumberOfTubes);
        }
        if (intFinalNumberOfTubes != intNumberOfTubes)
        {
          intFinalNumberOfTubes = intFinalNumberOfTubes + 1;
        }
        else
        {
          break;
        }
      }
    }
    intNumberOfSamplesPerTube = intNumberOfSamples / (intNumberOfTubes * 1.0);
    intResidualNumberOfSamplesPerTube = intNumberOfSamples % intNumberOfTubes;
    o_fltTotalVolumeCalculatedIncludingDeadVolume = 0.0;
    arrNumberOfSamplesPerTube.SetSize(0);
    o_arrIndependentVolumes.SetSize(0);
    o_arrPositions.SetSize(0);
    if (intResidualNumberOfSamplesPerTube == 0)
    {
      {
        for(loopCounter2 = 0; loopCounter2 < intNumberOfTubes;)
        {
          loopCounter2 = loopCounter2 + 1;
          arrNumberOfSamplesPerTube.AddAsLast(intNumberOfSamplesPerTube);
          o_arrPositions.AddAsLast(loopCounter2);
          fltTotalVolumePerTube = intNumberOfSamplesPerTube * fltVolumeForEachSampleIncludingDeadVolume;
          o_arrIndependentVolumes.AddAsLast(fltTotalVolumePerTube);
          o_fltTotalVolumeCalculatedIncludingDeadVolume = o_fltTotalVolumeCalculatedIncludingDeadVolume + fltTotalVolumePerTube;
        }
      }
    }
    else
    {
      intNumberOfSamplesPerTube = MthFloor(intNumberOfSamplesPerTube);
      {
        for(loopCounter2 = 0; loopCounter2 < intNumberOfTubes;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (loopCounter2 == intNumberOfTubes)
          {
            arrNumberOfSamplesPerTube.AddAsLast(intNumberOfSamplesPerTube);
            fltTotalVolumePerTube = intNumberOfSamplesPerTube * fltVolumeForEachSampleIncludingDeadVolume;
          }
          else
          {
            intTempNumberOfSamplesPerTube = intNumberOfSamplesPerTube + 1;
            arrNumberOfSamplesPerTube.AddAsLast(intTempNumberOfSamplesPerTube);
            fltTotalVolumePerTube = intTempNumberOfSamplesPerTube * fltVolumeForEachSampleIncludingDeadVolume;
          }
          o_fltTotalVolumeCalculatedIncludingDeadVolume = o_fltTotalVolumeCalculatedIncludingDeadVolume + fltTotalVolumePerTube;
          o_arrIndependentVolumes.AddAsLast(fltTotalVolumePerTube);
          o_arrPositions.AddAsLast(loopCounter2);
        }
      }
    }
    o_intNumberOfTubes = intNumberOfTubes;
    Util2::Debug::TraceArray(Translate(">>>>>>>>>>  arrNumberOfSamplesPerTube: "), arrNumberOfSamplesPerTube);
    Util2::Debug::TraceArray_2(Translate("Positions    Volume (µL) per tube"), o_arrPositions, o_arrIndependentVolumes);
  }

  private function Define_LabwareAssociation(  ) void {
    private variable arrStrCarrierNameInConfigFile[];
    private variable arrLabwareIdOnDeck[];
    private variable arrCarrierIdForConfigFile[];
    private variable arrStrPathPictureCarrierInConfigFile[];
    private variable arrStrTopTextForCarriersInConfigFile[];
    arrStrCarrierNameInConfigFile.SetSize(0);
    arrStrCarrierNameInConfigFile.AddAsLast(Translate("CPAC"));
    arrStrCarrierNameInConfigFile.AddAsLast(Translate("RGT1"));
    arrStrCarrierNameInConfigFile.AddAsLast(Translate("RGT2"));
    arrStrCarrierNameInConfigFile.AddAsLast(Translate("24 Tube Carrier"));
    arrStrCarrierNameInConfigFile.AddAsLast(Translate("32 Vial Carrier"));
    _arrStrCarrierNameInConfigFile=arrStrCarrierNameInConfigFile;
    arrLabwareIdOnDeck.SetSize(0);
    arrLabwareIdOnDeck.AddAsLast(Translate("VialRemovableAdapterPos24CPAC_0001"));
    arrLabwareIdOnDeck.AddAsLast(Translate("RGT_50mLTrough"));
    arrLabwareIdOnDeck.AddAsLast(Translate("RGT_50mLTrough"));
    arrLabwareIdOnDeck.AddAsLast(Translate("CAR_VIALS_24"));
    arrLabwareIdOnDeck.AddAsLast(Translate("CAR_VIALS_32_1"));
    _arrLabwareIdOnDeck=arrLabwareIdOnDeck;
    arrCarrierIdForConfigFile.SetSize(0);
    arrCarrierIdForConfigFile.AddAsLast(Translate("MFX_CAR_2HHSF30MTP_HHSF30DWP_CPAC_0001"));
    arrCarrierIdForConfigFile.AddAsLast(Translate("RGT_CAR1"));
    arrCarrierIdForConfigFile.AddAsLast(Translate("RGT_CAR2"));
    arrCarrierIdForConfigFile.AddAsLast(Translate("CAR_VIALS_24"));
    arrCarrierIdForConfigFile.AddAsLast(Translate("CAR_VIALS_32_1"));
    _arrCarrierIdForConfigFile=arrCarrierIdForConfigFile;
    arrStrPathPictureCarrierInConfigFile.SetSize(0);
    arrStrPathPictureCarrierInConfigFile.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Pictures\CPAC Carrier.jpg"));
    arrStrPathPictureCarrierInConfigFile.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Pictures\ReagentContainer Carrier 1.jpg"));
    arrStrPathPictureCarrierInConfigFile.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Pictures\ReagentContainer Carrier 2.jpg"));
    arrStrPathPictureCarrierInConfigFile.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Pictures\24 Tubes Vial Carrier.jpg"));
    arrStrPathPictureCarrierInConfigFile.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Pictures\32 Tubes Vial Carrier 1.jpg"));
    _arrStrPathPictureCarrierInConfigFile=arrStrPathPictureCarrierInConfigFile;
    arrStrTopTextForCarriersInConfigFile.SetSize(0);
    arrStrTopTextForCarriersInConfigFile.AddAsLast(Translate("Prepare Mastermix Tubes according to instructions below. Load Block on CPAC Carrier on Track 48 to 54"));
    arrStrTopTextForCarriersInConfigFile.AddAsLast(Translate("Loading Trough Reagent Carrier on Track 30"));
    arrStrTopTextForCarriersInConfigFile.AddAsLast(Translate("Loading Trough Reagent Carrier on Track 31"));
    arrStrTopTextForCarriersInConfigFile.AddAsLast(Translate("Loading 24 Reagent Tube Carrier on Track 32"));
    arrStrTopTextForCarriersInConfigFile.AddAsLast(Translate("Loading 32 Reagent Vials Carrier on Track 33"));
    _arrStrTopTextForCarriersInConfigFile=arrStrTopTextForCarriersInConfigFile;
    _arrTopPicturesStrPaths.SetSize(0);
    _arrTopPicturesStrPaths.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Pictures\ODTC Hamilton Comforlid Position.jpg"));
    _arrTopPicturesStrPaths.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Pictures\PlateStacker Carrier.jpg"));
    _arrTopPicturesStrPaths.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Pictures\Tip50ulFilter Carriers.jpg"));
    _arrTopPicturesStrPaths.AddAsLast(Translate(""));
    _arrTopPicturesStrPaths.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Pictures\Tip300ulFilter Carriers.jpg"));
    _arrTopPicturesStrPaths.AddAsLast(Translate(""));
    _arrTopPicturesStrPaths.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Pictures\ReagentContainer Carrier 1 and 2.jpg"));
    _arrTopPicturesStrPaths.AddAsLast(Translate(""));
    _arrTopPicturesStrPaths.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Pictures\24 Tubes Vial Carrier.jpg"));
    _arrTopPicturesStrPaths.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Pictures\32 Tubes Vial Carrier 1.jpg"));
    _arrTopPicturesStrPaths.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Pictures\32 Tubes Vial Carrier 2.jpg"));
    _arrTopPicturesStrPaths.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Pictures\Plate Tip Carrier.jpg"));
    _arrTopPicturesStrPaths.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Pictures\CPAC Carrier.jpg"));
    _arrDeckCarriersID.SetSize(0);
    _arrDeckCarriersID.AddAsLast(Translate("MFX_CAR_ODTC_MTP_0001"));
    _arrDeckCarriersID.AddAsLast(Translate("PLT_CAR_L4ST_0001"));
    _arrDeckCarriersID.AddAsLast(Translate("TIP_CAR_480BC_TIP_50F_PINK_0001"));
    _arrDeckCarriersID.AddAsLast(Translate("TIP_CAR_480BC_TIP_50F_PINK_0002"));
    _arrDeckCarriersID.AddAsLast(Translate("TIP_CAR_480BC_TIP_STF_YELLOW_0001"));
    _arrDeckCarriersID.AddAsLast(Translate("TIP_CAR_480BC_TIP_STF_YELLOW_0002"));
    _arrDeckCarriersID.AddAsLast(Translate("RGT_CAR1"));
    _arrDeckCarriersID.AddAsLast(Translate("RGT_CAR2"));
    _arrDeckCarriersID.AddAsLast(Translate("CAR_VIALS_24"));
    _arrDeckCarriersID.AddAsLast(Translate("CAR_VIALS_32_1"));
    _arrDeckCarriersID.AddAsLast(Translate("CAR_VIALS_32_2"));
    _arrDeckCarriersID.AddAsLast(Translate("PLT_CAR_2TIP_2PCR_MTP"));
    _arrDeckCarriersID.AddAsLast(Translate("MFX_CAR_2HHSF30MTP_HHSF30DWP_CPAC_0001"));
    _intNumberOfLoadableCarriers=_arrDeckCarriersID.GetSize();
    _arrLoadableCarriers.SetSize(0);
    _arrLoadableCarriers.AddAsLast(ASWGLOBAL::BOOL::FALSE);
    _arrLoadableCarriers.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    _arrLoadableCarriers.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    _arrLoadableCarriers.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    _arrLoadableCarriers.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    _arrLoadableCarriers.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    _arrLoadableCarriers.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    _arrLoadableCarriers.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    _arrLoadableCarriers.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    _arrLoadableCarriers.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    _arrLoadableCarriers.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    _arrLoadableCarriers.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    _arrLoadableCarriers.AddAsLast(ASWGLOBAL::BOOL::FALSE);
  }

  private function _Loading( variable & i_arrColumnHeaders[], variable i_strTopText, variable i_strBottomText, variable i_strTopImageFilePath, variable i_intImageSize, variable & io_arrPositions[], variable & io_arrQuantities[], variable & io_arrDescriptions[] ) void {
    private variable intResult;
    AswStandardDialogs::Initialize();
    AswStandardDialogs::LoadingDialogSetResources(i_arrColumnHeaders);
    intResult = AswStandardDialogs::LoadingDialog(Translate("Load the following Carrier"), AswStandardDialogs::ButtonType::OkCancel, 0, 0, 0, i_strTopText, i_strBottomText, i_strTopImageFilePath, Translate(""), i_intImageSize, io_arrPositions, io_arrQuantities, io_arrDescriptions);
    if (intResult == 2)
    {
      abort;
    }
    io_arrPositions.SetSize(0);
    io_arrQuantities.SetSize(0);
    io_arrDescriptions.SetSize(0);
  }

  private function _LoadingDialogAddRowWithData( variable i_strValue1, variable i_strValue2, variable i_strValue3 ) void {
    private variable strStringType;
    strStringType = StrGetType(i_strValue1);
    if (strStringType == "i")
    {
      i_strValue1 = StrIStr(i_strValue1);
    }
    if (strStringType == "f")
    {
      i_strValue1 = StrFStr(i_strValue1);
    }
    strStringType = StrGetType(i_strValue2);
    if (strStringType == "i")
    {
      i_strValue2 = StrIStr(i_strValue2);
    }
    if (strStringType == "f")
    {
      i_strValue2 = StrFStr(i_strValue2);
    }
    strStringType = StrGetType(i_strValue3);
    if (strStringType == "i")
    {
      i_strValue3 = StrIStr(i_strValue3);
    }
    if (strStringType == "f")
    {
      i_strValue3 = StrFStr(i_strValue3);
    }
    _arrPositions.AddAsLast(i_strValue1);
    _arrQuantities.AddAsLast(i_strValue2);
    _arrDescriptions.AddAsLast(i_strValue3);
  }

  private function Return_Resources( variable i_strConfigFileFullPath, variable & i_arrProcessToPerform[] ) void {
    private variable fileResources_Process;
    private variable strPartialResources1;
    private variable fileResources_ComfortLids;
    private variable strPartialResources2;
    private variable fileResources_Tips50;
    private variable fileResources_HSP;
    private variable fileResources_Extra_Tips_50;
    private variable fileResources_Tips1000;
    private variable fileResources_MIDI;
    private variable intMaxNumberMIDIStack1;
    private variable fileResources_Extra_Tips_300;
    private variable intMaxNumberMIDIStack2;
    private variable intMaxNumberMIDIStack3;
    private variable fileResources_Extra_Tips_1000;
    private variable intMaxNumberMIDIStack1and2;
    private variable intMaxNumberMIDIStack1and2and3;
    private variable strSQL_CalculateResources;
    private variable loopCounter2;
    private variable strResources;
    private variable fileResources_Tips300;
    private file fileResources;
    private variable strBarcodeString;
    private variable intTotalProcessToPerform;
    private variable _intNumberOfExtra1000uLTips;
    private variable _intNumberOfExtra50uLTips;
    private variable _intNumberOfExtra300uLTips;
    private variable intNumSamplesFromFile;
    private variable l_str_Concat_TipsPerProcess;
    private variable _intNumberOf50uLTipsThisProcess;
    private variable _intNumberOf300uLTipsThisProcess;
    private variable _intNumberOf1000uLTipsThisProcess;
    private variable _intNumberOf300uLTipsMPHThisProcess;
    private variable l_int_ValueLength;
    private variable l_str_fileResources_Process;
    _intNumberOf1000uLTips = 0;
    _intNumberOf300uLTips = 0;
    _intNumberOf50uLTips = 0;
    _intNumberOfExtra1000uLTips = 0;
    _intNumberOfExtra300uLTips = 0;
    _intNumberOf300uLTipsMPH = 0;
    _intNumberOfExtra50uLTips = 0;
    _intNumberOfHSPPlates = 0;
    _intNumberOfMIDIPlates = 0;
    _intNumberOfHamiltonComfortLids = 0;
    strBarcodeString = Translate("");
    intNumSamplesFromFile = _intNumberOfSamplesRequired;
    Util2::Debug::TraceArray(Translate("i_arrProcessToPerform: "), i_arrProcessToPerform);
    intTotalProcessToPerform=i_arrProcessToPerform.GetSize();
    _intFirstProcess=i_arrProcessToPerform.GetAt(1-1);
    _intLastProcess=i_arrProcessToPerform.GetAt(intTotalProcessToPerform-1);
    t_arr_NumberOfTipsPerProcess.SetSize(0);
    _intNumberOf1000uLTipsThisProcess = 0;
    _intNumberOf300uLTipsThisProcess = 0;
    _intNumberOf300uLTipsMPHThisProcess = 0;
    _intNumberOf50uLTipsThisProcess = 0;
    if(0){
      strSQL_CalculateResources = StrConcat12(Translate("Select * from [Resources$] where [Process] >= "), _intFirstProcess, Translate(" AND [Process] <= "), _intLastProcess, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      TrcTrace(strSQL_CalculateResources, Translate(""));
      fileResources.AddField("Process", fileResources_Process, hslInteger);
      fileResources.AddField("Tips50", fileResources_Tips50, hslInteger);
      fileResources.AddField("Tips300", fileResources_Tips300, hslInteger);
      fileResources.AddField("Tips1000", fileResources_Tips1000, hslInteger);
      fileResources.AddField("Extra Tips 50", fileResources_Extra_Tips_50, hslInteger);
      fileResources.AddField("Extra Tips 300", fileResources_Extra_Tips_300, hslInteger);
      fileResources.AddField("Extra Tips 1000", fileResources_Extra_Tips_1000, hslInteger);
      fileResources.AddField("ComfortLids", fileResources_ComfortLids, hslInteger);
      fileResources.AddField("HSP", fileResources_HSP, hslInteger);
      fileResources.AddField("MIDI", fileResources_MIDI, hslInteger);
      if( 0 == fileResources.Open(i_strConfigFileFullPath + " " + "Resources$", hslRead, strSQL_CalculateResources) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strConfigFileFullPath, "HxMetEdCompCmd");
      }
    }
    fileResources.AddField("Process", fileResources_Process, hslInteger);
    fileResources.AddField("Tips50", fileResources_Tips50, hslInteger);
    fileResources.AddField("Tips300", fileResources_Tips300, hslInteger);
    fileResources.AddField("Tips1000", fileResources_Tips1000, hslInteger);
    fileResources.AddField("Extra Tips 50", fileResources_Extra_Tips_50, hslInteger);
    fileResources.AddField("Extra Tips 300", fileResources_Extra_Tips_300, hslInteger);
    fileResources.AddField("Extra Tips 1000", fileResources_Extra_Tips_1000, hslInteger);
    fileResources.AddField("ComfortLids", fileResources_ComfortLids, hslInteger);
    fileResources.AddField("HSP", fileResources_HSP, hslInteger);
    fileResources.AddField("MIDI", fileResources_MIDI, hslInteger);
    if( 0 == fileResources.Open(i_strConfigFileFullPath + " " + "Resources$", hslRead, "Select * from [Resources$] where [Process] is not null") )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strConfigFileFullPath, "HxMetEdCompCmd");
    }
    TrcTrace(Translate("Process        Tips50       Tips300       Tips1000       ExtraTips50       ExtraTips300       ExtraTips1000       ComfortLids       HSP          MIDI"), Translate(""));
    {
      loopCounter2 = 0;
      while (
         (fileResources.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == fileResources.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_str_fileResources_Process = StrIStr(fileResources_Process);
        l_int_ValueLength = StrGetLength(l_str_fileResources_Process);
        if (l_int_ValueLength == 0)
        {
          break;
        }
        if (fileResources_Process >= _intFirstProcess)
        {
          if (fileResources_Process <= _intLastProcess)
          {
            strPartialResources1 = StrConcat12(fileResources_Process, Translate("            "), fileResources_Tips50, Translate("            "), fileResources_Tips300, Translate("            "), fileResources_Tips1000, Translate("            "), fileResources_Extra_Tips_50, Translate("            "), fileResources_Extra_Tips_300, Translate("            "));
            strPartialResources2 = StrConcat12(fileResources_Extra_Tips_1000, Translate("            "), fileResources_ComfortLids, Translate("            "), fileResources_HSP, Translate("            "), fileResources_MIDI, Translate("            "), Translate(""), Translate(""), Translate(""), Translate(""));
            strResources = StrConcat12(strPartialResources1, strPartialResources2, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            TrcTrace(strResources, Translate(""));
            _intNumberOfHamiltonComfortLids = _intNumberOfHamiltonComfortLids + fileResources_ComfortLids;
            _intNumberOfMIDIPlates = _intNumberOfMIDIPlates + fileResources_MIDI;
            _intNumberOfHSPPlates = _intNumberOfHSPPlates + fileResources_HSP;
            _intNumberOf50uLTips = _intNumberOf50uLTips + fileResources_Tips50;
            _intNumberOfExtra50uLTips = _intNumberOfExtra50uLTips + fileResources_Extra_Tips_50;
            _intNumberOf300uLTips = _intNumberOf300uLTips + fileResources_Tips300;
            _intNumberOfExtra300uLTips = _intNumberOfExtra300uLTips + fileResources_Extra_Tips_300;
            _intNumberOf1000uLTips = _intNumberOf1000uLTips + fileResources_Tips1000;
            _intNumberOfExtra1000uLTips = _intNumberOfExtra1000uLTips + fileResources_Extra_Tips_1000;
            _intNumberOf1000uLTipsThisProcess = (fileResources_Tips1000 * intNumSamplesFromFile) + fileResources_Extra_Tips_1000;
            _intNumberOf300uLTipsThisProcess = (fileResources_Tips300 * intNumSamplesFromFile) + fileResources_Extra_Tips_300;
            _intNumberOf50uLTipsThisProcess = (fileResources_Tips50 * intNumSamplesFromFile) + fileResources_Extra_Tips_50;
          }
          else
          {
            _intNumberOf1000uLTipsThisProcess = 0;
            _intNumberOf300uLTipsMPHThisProcess = 0;
            _intNumberOf50uLTipsThisProcess = 0;
            _intNumberOf300uLTipsThisProcess = 0;
          }
        }
        else
        {
          _intNumberOf1000uLTipsThisProcess = 0;
          _intNumberOf300uLTipsMPHThisProcess = 0;
          _intNumberOf50uLTipsThisProcess = 0;
          _intNumberOf300uLTipsThisProcess = 0;
        }
        l_str_Concat_TipsPerProcess = StrConcat12(_intNumberOf50uLTipsThisProcess, Translate(","), _intNumberOf300uLTipsThisProcess, Translate(","), _intNumberOf300uLTipsMPHThisProcess, Translate(","), _intNumberOf1000uLTipsThisProcess, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        t_arr_NumberOfTipsPerProcess.AddAsLast(l_str_Concat_TipsPerProcess);
      }
    }
    if( 0 != fileResources.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileResources.RemoveFields();
    if (_intNumberOfHamiltonComfortLids > 1)
    {
      _intNumberOfHamiltonComfortLids = 1;
    }
    intMaxNumberMIDIStack1 = 4;
    intMaxNumberMIDIStack2 = 4;
    intMaxNumberMIDIStack3 = 3;
    intMaxNumberMIDIStack1and2 = intMaxNumberMIDIStack1 + intMaxNumberMIDIStack2;
    intMaxNumberMIDIStack1and2and3 = intMaxNumberMIDIStack1and2 + intMaxNumberMIDIStack3;
    if (_intNumberOfMIDIPlates <= intMaxNumberMIDIStack1)
    {
      _intNumberMIDIStack1 = _intNumberOfMIDIPlates;
      _intNumberMIDIStack2 = 0;
      _intNumberMIDIStack3 = 0;
    }
    else
    {
      if (_intNumberOfMIDIPlates <= intMaxNumberMIDIStack1and2)
      {
        _intNumberMIDIStack1 = intMaxNumberMIDIStack1;
        _intNumberMIDIStack2 = _intNumberOfMIDIPlates - intMaxNumberMIDIStack1;
        _intNumberMIDIStack3 = 0;
      }
      else
      {
        _intNumberMIDIStack1 = intMaxNumberMIDIStack1;
        _intNumberMIDIStack2 = intMaxNumberMIDIStack2;
        _intNumberMIDIStack3 = _intNumberOfMIDIPlates - intMaxNumberMIDIStack1and2;
      }
    }
    _intNumberOf1000uLTips = (_intNumberOf1000uLTips * intNumSamplesFromFile) + _intNumberOfExtra1000uLTips;
    _intNumberOf300uLTips = (_intNumberOf300uLTips * intNumSamplesFromFile) + _intNumberOfExtra300uLTips;
    _intNumberOf50uLTips = (_intNumberOf50uLTips * intNumSamplesFromFile) + _intNumberOfExtra50uLTips;
    Trace ("_intNumberOf1000uLTips  =", _intNumberOf1000uLTips);
    Trace ("_intNumberOf300uLTips  =", _intNumberOf300uLTips);
    Trace ("_intNumberOf50uLTips  =", _intNumberOf50uLTips);
    Trace ("_intNumberOfHamiltonComfortLids  =", _intNumberOfHamiltonComfortLids);
    Trace ("_intNumberOfMIDIPlates  =", _intNumberOfMIDIPlates);
    Trace (">>> _intNumberMIDIStack1  =", _intNumberMIDIStack1);
    Trace (">>> _intNumberMIDIStack2  =", _intNumberMIDIStack2);
    Trace (">>> _intNumberMIDIStack3  =", _intNumberMIDIStack3);
    Trace ("_intNumberOfHSPPlates  =", _intNumberOfHSPPlates);
  }

  private function CalculateResourcesForDialog( variable i_strCarrierID, variable & i_arrProcessesToPerform[], variable i_intNumberOfSamples, variable i_switchDisplayDialog, variable i_strPathDialogPicture, variable i_strTopText, variable i_strBottomText, variable & o_arrPositions[], variable & o_arrQuantities[], variable & o_arrDescriptions[], variable & o_arrProcessID[], variable & o_arrLabwareType[] ) void {
    private variable intProcessesToPerform;
    private variable fileNGSConfig_PositionID;
    private variable fileNGSConfig_Labware_Type;
    private variable strTotalVolumeCalculatedIncludingDeadVolume;
    private variable fileNGSConfig_Reagent;
    private variable rtnFindSubString;
    private variable flTotalVolumeCalculatedExcludingDeadVolume;
    private variable fileNGSConfig_ProcessID;
    private variable flTotalVolumeCalculatedIncludingDeadVolume;
    private variable flTotalVolumeMastermixPerSample;
    private variable sqlString02;
    private variable intNumProcesses;
    private variable intNumberOfContainersRequired;
    private variable strfileNGSConfig_Name;
    private variable flRoundedVolume;
    private variable strTotalVolumeComponentCalculated;
    private variable fileNGSConfig_Liquid_Class_Name;
    private variable loopCounter1;
    private variable fileNGSConfig_Maximum_Volume_Labware;
    private variable fileNGSConfig_Dead_Volume_Labware;
    private variable fileNGSConfig_ProcessNumber;
    private variable loopCounter3;
    private variable flTotalVolumeComponentCalculated;
    private variable fileNGSConfig_Carrier;
    private variable fileNGSConfig_Dead_Volume_Reagent;
    private variable fileNGSConfig_Volume_per_Sample;
    private variable fileNGSConfig_Name;
    private file fileNGSConfig;
    private variable arrColumnHeadersVolumes[];
    private variable arrPositions[];
    private variable arrVolumesPerPosition[];
    private variable arrSubStrings[];
    private variable arr_strProcesses[];
    private variable fltTotalAccumulativeVolume;
    private variable intPositionInArray;
    private variable blnReagentFound;
    private variable arr_AccumulativeReagentVolume[];
    private variable arr_AccumulativeReagentName[];
    private variable intPositionInArray2;
    private variable blnReagentFoundInAcummulativeArray;
    private variable fltTotalAccumulativeVolumePerSample;
    intProcessesToPerform=i_arrProcessesToPerform.GetSize();
    arrColumnHeadersVolumes.SetSize(0);
    arrColumnHeadersVolumes.AddAsLast(Translate("Position"));
    arrColumnHeadersVolumes.AddAsLast(Translate("Volume"));
    arrColumnHeadersVolumes.AddAsLast(Translate("Description"));
    arr_strProcesses.SetSize(0);
    fileNGSConfig.AddField("ProcessID", fileNGSConfig_ProcessID, hslString, 255);
    if( 0 == fileNGSConfig.Open(_strPathConfigFile + " " + "Reagents$", hslRead, "Select distinct [ProcessID] from [Reagents$]") )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strPathConfigFile, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (fileNGSConfig.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == fileNGSConfig.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        arr_strProcesses.AddAsLast(fileNGSConfig_ProcessID);
      }
    }
    if( 0 != fileNGSConfig.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileNGSConfig.RemoveFields();
    intNumProcesses=arr_strProcesses.GetSize();
    arr_AccumulativeReagentName.SetSize(0);
    arr_AccumulativeReagentVolume.SetSize(0);
    fltTotalAccumulativeVolume = 0;
    sqlString02 = StrConcat12(Translate(""), Translate("Select * From [Reagents$] where [ProcessNumber] >= "), _intFirstProcess, Translate(" AND [ProcessNumber]<= "), _intLastProcess, Translate(""), Translate(""), Translate(""), Translate(""), Translate(" AND [Carrier] = '"), i_strCarrierID, Translate("'"));
    TrcTrace(Translate(">>>>>>>>>>>>>>>>>"), sqlString02);
    fileNGSConfig.AddField("ProcessNumber", fileNGSConfig_ProcessNumber, hslInteger);
    fileNGSConfig.AddField("ProcessID", fileNGSConfig_ProcessID, hslString, 255);
    fileNGSConfig.AddField("Reagent", fileNGSConfig_Reagent, hslString, 255);
    fileNGSConfig.AddField("Name", fileNGSConfig_Name, hslString, 255);
    fileNGSConfig.AddField("Labware Type", fileNGSConfig_Labware_Type, hslString, 255);
    fileNGSConfig.AddField("Carrier", fileNGSConfig_Carrier, hslString, 255);
    fileNGSConfig.AddField("PositionID", fileNGSConfig_PositionID, hslString, 255);
    fileNGSConfig.AddField("Volume per Sample", fileNGSConfig_Volume_per_Sample, hslFloat);
    fileNGSConfig.AddField("Dead Volume Reagent", fileNGSConfig_Dead_Volume_Reagent, hslFloat);
    fileNGSConfig.AddField("Dead Volume Labware", fileNGSConfig_Dead_Volume_Labware, hslFloat);
    fileNGSConfig.AddField("Maximum Volume Labware", fileNGSConfig_Maximum_Volume_Labware, hslFloat);
    fileNGSConfig.AddField("Liquid Class Name", fileNGSConfig_Liquid_Class_Name, hslString, 255);
    if( 0 == fileNGSConfig.Open(_strPathConfigFile + " " + "Reagents$", hslRead, sqlString02) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strPathConfigFile, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (fileNGSConfig.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == fileNGSConfig.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        blnReagentFound = APPSLIB::ArrayLookup(_arrStrReagentNameToExport, fileNGSConfig_Name, intPositionInArray);
        if (fileNGSConfig_Reagent == "Mastermix Component")
        {
          blnReagentFound = ASWGLOBAL::BOOL::FALSE;
        }
        if (blnReagentFound == ASWGLOBAL::BOOL::TRUE)
        {
          blnReagentFoundInAcummulativeArray = APPSLIB::ArrayLookup(arr_AccumulativeReagentName, fileNGSConfig_Name, intPositionInArray2);
          if (blnReagentFoundInAcummulativeArray == ASWGLOBAL::BOOL::FALSE)
          {
            TrcTrace12(Translate(">>>>>>>>>>>>>>>>>>>> Now extracting data for : "), fileNGSConfig_Name, Translate(" on Carrier "), i_strCarrierID, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            arr_AccumulativeReagentName.AddAsLast(fileNGSConfig_Name);
            if (fileNGSConfig_Reagent != "Mastermix Component")
            {
              if (loopCounter1 != 1)
              {
                _LoadingDialogAddRowWithData(Translate("--------"), Translate("-----------------------------------------------"), Translate("-----------------------------------------------"));
              }
              rtnFindSubString = StrFind(fileNGSConfig_PositionID, Translate(","));
              if (rtnFindSubString != 0)
              {
                STRTOKENIZE::StrTokenize(fileNGSConfig_PositionID, Translate(","), arrSubStrings, 0);
              }
              fltTotalAccumulativeVolume=_arrFltTotalVolumePerSampleRequired.GetAt(intPositionInArray-1);
              fltTotalAccumulativeVolumePerSample=_arrFltTotalVolumePerSampleToExport.GetAt(intPositionInArray-1);
              CalculatedPositionsTubesAndVolumesForReagents(fltTotalAccumulativeVolume, 0, fileNGSConfig_Maximum_Volume_Labware, fileNGSConfig_Dead_Volume_Labware, fileNGSConfig_Dead_Volume_Reagent, fltTotalAccumulativeVolumePerSample, 0, intNumberOfContainersRequired, flTotalVolumeCalculatedIncludingDeadVolume, flTotalVolumeCalculatedExcludingDeadVolume, arrPositions, arrVolumesPerPosition, 1);
              if (fileNGSConfig_Reagent == "Mastermix")
              {
                flTotalVolumeMastermixPerSample = fileNGSConfig_Volume_per_Sample;
              }
              Util2::Debug::TraceArray(Translate("arrVolumesPerPosition: "), arrVolumesPerPosition);
              {
                for(loopCounter3 = 0; loopCounter3 < intNumberOfContainersRequired;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  if (arrVolumesPerPosition.ElementAt( loopCounter3 -1) > 2000)
                  {
                    flRoundedVolume = arrVolumesPerPosition.ElementAt( loopCounter3 -1) / (1000 * 1.0);
                    ReformatStringFloatDecimalPoints(flRoundedVolume, strTotalVolumeCalculatedIncludingDeadVolume);
                    strTotalVolumeCalculatedIncludingDeadVolume = StrConcat12(strTotalVolumeCalculatedIncludingDeadVolume, Translate(" mL   ("), fileNGSConfig_Labware_Type, Translate(")"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                  }
                  else
                  {
                    ReformatStringFloatDecimalPoints(arrVolumesPerPosition.ElementAt( loopCounter3 -1), strTotalVolumeCalculatedIncludingDeadVolume);
                    strTotalVolumeCalculatedIncludingDeadVolume = StrConcat12(strTotalVolumeCalculatedIncludingDeadVolume, Translate(" µL   ("), fileNGSConfig_Labware_Type, Translate(")"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                  }
                  if (rtnFindSubString != 0)
                  {
                    _LoadingDialogAddRowWithData(arrSubStrings.ElementAt( loopCounter3 -1), strTotalVolumeCalculatedIncludingDeadVolume, fileNGSConfig_Name);
                    fileNGSConfig_PositionID = arrSubStrings.ElementAt( loopCounter3 -1);
                  }
                  else
                  {
                    _LoadingDialogAddRowWithData(fileNGSConfig_PositionID, strTotalVolumeCalculatedIncludingDeadVolume, fileNGSConfig_Name);
                  }
                }
              }
            }
            arrSubStrings.SetSize(0);
          }
          else
          {
            break;
          }
        }
        else
        {
          if (fileNGSConfig_Reagent == "Mastermix Component")
          {
            TrcTrace12(Translate(">>>>>>>>>>>>>>>>>>>> Now extracting data for component : "), fileNGSConfig_Name, Translate(" on Carrier "), i_strCarrierID, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            CalculatePercentages(flTotalVolumeMastermixPerSample, fileNGSConfig_Volume_per_Sample, flTotalVolumeCalculatedIncludingDeadVolume, flTotalVolumeComponentCalculated);
            ReformatStringFloatDecimalPoints(flTotalVolumeComponentCalculated, strTotalVolumeComponentCalculated);
            strTotalVolumeComponentCalculated = StrConcat12(Translate("    "), strTotalVolumeComponentCalculated, Translate(" µL"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            strfileNGSConfig_Name = StrConcat12(Translate("    "), fileNGSConfig_Name, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            _LoadingDialogAddRowWithData(Translate(""), strTotalVolumeComponentCalculated, strfileNGSConfig_Name);
          }
        }
      }
    }
    if (i_switchDisplayDialog == 1)
    {
      _Loading(arrColumnHeadersVolumes, i_strTopText, i_strBottomText, i_strPathDialogPicture, 500, _arrPositions, _arrQuantities, _arrDescriptions);
    }
    if( 0 != fileNGSConfig.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileNGSConfig.RemoveFields();
  }

  private function CalculatePercentages( variable i_ReferenceValue, variable i_ValueToEvaluate, variable i_Base100, variable & o_Base100ValueEvaluated ) void {
    private variable fltPercentage;
    o_Base100ValueEvaluated = 0;
    fltPercentage = i_ValueToEvaluate / (i_ReferenceValue * 1.0);
    o_Base100ValueEvaluated = i_Base100 * fltPercentage;
  }

  private function ReformatStringFloatDecimalPoints( variable i_strValueToReformat, variable & o_strValueReformatted ) void {
    private variable str_io_strValueToReformat;
    private variable intStrFindResult;
    o_strValueReformatted = 0;
    str_io_strValueToReformat = StrConcat2(Translate(""), i_strValueToReformat);
    intStrFindResult = StrFind(str_io_strValueToReformat, Translate("."));
    if (intStrFindResult != -1)
    {
      intStrFindResult = intStrFindResult + 2;
      o_strValueReformatted = StrLeft(str_io_strValueToReformat, intStrFindResult);
    }
    else
    {
      o_strValueReformatted = str_io_strValueToReformat;
    }
  }

  private function CalculateTotalVolumeReagent( variable i_strReagentName, variable & o_fltTotalVolumeRequired, variable & o_fltTotalVolumeRequiredExcludingDeadVolume, variable & o_intNumberOfPositionsRequired, variable & o_arrStrPositionsFromFile[], variable & o_fltVolumePerSample, variable & o_arrFltVolumePerSample[], variable & o_fltTotalVolumePerSampleThisRun ) void {
    private dialog dialogHandle_2;
    private variable fileNGSConfig_Labware_Type;
    private variable fltTotalVolumePerSampleRequired;
    private variable intNumberOfRecords;
    private variable fileNGSConfig_PositionID;
    private variable intTotalPositionsDefinedInFile;
    private variable fileNGSConfig_Reagent;
    private variable rtnFindSubString;
    private variable fileNGSConfig_ProcessID;
    private variable intNumberOfExtraPositionsOnError;
    private variable strSQLSentence;
    private variable fileNGSConfig_Liquid_Class_Name;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable fileNGSConfig_ProcessNumber;
    private variable fileNGSConfig_Dead_Volume_Labware;
    private variable fileNGSConfig_Maximum_Volume_Labware;
    private variable fileNGSConfig_Carrier;
    private variable fileNGSConfig_Name;
    private variable fileNGSConfig_Dead_Volume_Reagent;
    private variable fileNGSConfig_Volume_per_Sample;
    private file fileNGSConfig;
    private variable arrPositionsRequired[];
    private variable arrVolumeForEachPosition[];
    private variable arrSubStrings[];
    private variable o_TEMPfltTotalVolumeRequiredExcludingDeadVolume;
    private variable fltTotalVolumePerSampleRequiredThisRun;
    private variable o_fltTotalVolumeRequiredIncludingDeadVolume;
    private variable arr_Dummy[];
    private variable loopCounter3;
    o_fltTotalVolumeRequired = 0;
    o_fltTotalVolumeRequiredExcludingDeadVolume = 0;
    o_intNumberOfPositionsRequired = 0;
    o_fltVolumePerSample = 0;
    o_fltTotalVolumePerSampleThisRun = 0;
    if(0){
      strSQLSentence = StrConcat12(Translate("Select * from [Reagents$] where"), Translate(" [ProcessNumber] >= "), _intFirstProcess, Translate(" AND [ProcessNumber] <= "), _intLastProcess, Translate(" AND [Name] ='"), i_strReagentName, Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    strSQLSentence = StrConcat12(Translate("Select * from [Reagents$] where "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(" [Name] = '"), i_strReagentName, Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""));
    TrcTrace(Translate(">>> "), strSQLSentence);
    intNumberOfRecords = 0;
    fltTotalVolumePerSampleRequired = 0.0;
    fltTotalVolumePerSampleRequiredThisRun = 0.0;
    arrSubStrings.SetSize(0);
    o_arrStrPositionsFromFile.SetSize(0);
    fileNGSConfig.AddField("ProcessNumber", fileNGSConfig_ProcessNumber, hslInteger);
    fileNGSConfig.AddField("ProcessID", fileNGSConfig_ProcessID, hslString, 255);
    fileNGSConfig.AddField("Reagent", fileNGSConfig_Reagent, hslString, 255);
    fileNGSConfig.AddField("Name", fileNGSConfig_Name, hslString, 255);
    fileNGSConfig.AddField("Labware Type", fileNGSConfig_Labware_Type, hslString, 255);
    fileNGSConfig.AddField("Carrier", fileNGSConfig_Carrier, hslString, 255);
    fileNGSConfig.AddField("PositionID", fileNGSConfig_PositionID, hslString, 255);
    fileNGSConfig.AddField("Volume per Sample", fileNGSConfig_Volume_per_Sample, hslFloat);
    fileNGSConfig.AddField("Dead Volume Reagent", fileNGSConfig_Dead_Volume_Reagent, hslFloat);
    fileNGSConfig.AddField("Dead Volume Labware", fileNGSConfig_Dead_Volume_Labware, hslFloat);
    fileNGSConfig.AddField("Maximum Volume Labware", fileNGSConfig_Maximum_Volume_Labware, hslFloat);
    fileNGSConfig.AddField("Liquid Class Name", fileNGSConfig_Liquid_Class_Name, hslString, 255);
    if( 0 == fileNGSConfig.Open(_strPathConfigFile + " " + "Reagents$", hslRead, strSQLSentence) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strPathConfigFile, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (fileNGSConfig.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == fileNGSConfig.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        intNumberOfRecords = intNumberOfRecords + 1;
        fltTotalVolumePerSampleRequired = fltTotalVolumePerSampleRequired + fileNGSConfig_Volume_per_Sample;
        if (fileNGSConfig_ProcessNumber >= _intFirstProcess)
        {
          if (fileNGSConfig_ProcessNumber <= _intLastProcess)
          {
            fltTotalVolumePerSampleRequiredThisRun = fltTotalVolumePerSampleRequiredThisRun + fileNGSConfig_Volume_per_Sample;
          }
        }
        rtnFindSubString = StrFind(fileNGSConfig_PositionID, Translate(","));
        if (rtnFindSubString != 0)
        {
          STRTOKENIZE::StrTokenize(fileNGSConfig_PositionID, Translate(","), arrSubStrings, 0);
        }
        else
        {
          arrSubStrings.AddAsLast(fileNGSConfig_PositionID);
        }
        o_arrFltVolumePerSample.AddAsLast(fileNGSConfig_Volume_per_Sample);
      }
    }
    o_fltVolumePerSample = fltTotalVolumePerSampleRequired;
    o_fltTotalVolumePerSampleThisRun = fltTotalVolumePerSampleRequiredThisRun;
    o_fltTotalVolumeRequiredExcludingDeadVolume = fltTotalVolumePerSampleRequiredThisRun * _intNumberOfSamplesRequired;
    if( 0 != fileNGSConfig.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileNGSConfig.RemoveFields();
    if (intNumberOfRecords > 1)
    {
      MECC::TraceComment(Translate(">>>> Multiple Records for this reagent have been detected!!"));
    }
    intTotalPositionsDefinedInFile=arrSubStrings.GetSize();
    CalculateNumberOfTubesAndVolumePerTube_Rev2(i_strReagentName, _intNumberOfSamplesRequired, fltTotalVolumePerSampleRequired, fileNGSConfig_Maximum_Volume_Labware, fileNGSConfig_Dead_Volume_Labware, fileNGSConfig_Dead_Volume_Reagent, o_intNumberOfPositionsRequired, arrVolumeForEachPosition, arr_Dummy);
    o_fltTotalVolumeRequiredIncludingDeadVolume = 0.0;
    {
      for(loopCounter3 = 0; loopCounter3 < o_intNumberOfPositionsRequired;)
      {
        loopCounter3 = loopCounter3 + 1;
        o_fltTotalVolumeRequiredIncludingDeadVolume = o_fltTotalVolumeRequiredIncludingDeadVolume + arrVolumeForEachPosition.ElementAt( loopCounter3 -1);
      }
    }
    o_fltTotalVolumeRequired = o_fltTotalVolumeRequiredIncludingDeadVolume;
    if(0){
      CalculatedPositionsTubesAndVolumesForReagents(0, _intNumberOfSamplesRequired, fileNGSConfig_Maximum_Volume_Labware, fileNGSConfig_Dead_Volume_Labware, fileNGSConfig_Dead_Volume_Reagent, fltTotalVolumePerSampleRequired, 0, o_intNumberOfPositionsRequired, o_fltTotalVolumeRequiredIncludingDeadVolume, o_TEMPfltTotalVolumeRequiredExcludingDeadVolume, arrPositionsRequired, arrVolumeForEachPosition, 1);
    }
    if (intTotalPositionsDefinedInFile < o_intNumberOfPositionsRequired)
    {
      intNumberOfExtraPositionsOnError = o_intNumberOfPositionsRequired - intTotalPositionsDefinedInFile;
      dialogHandle_2.SetOutput(Translate("Error: Please define "), intNumberOfExtraPositionsOnError, Translate(" position for this reagent."), "\n", Translate("A total of "), o_intNumberOfPositionsRequired, Translate(" positions are required for this reagent but only "), intTotalPositionsDefinedInFile, "\n", Translate(" positions are defined in Config File"));
      dialogHandle_2.ShowOutput("", hslOKOnly | hslError | hslDefButton1, hslInfinite);
    }
    else
    {
      TrcTrace(Translate("********* Generate o_arrStrPositionsFromFile based on arrSubStrings"), Translate(""));
      {
        for(loopCounter2 = 0; loopCounter2 < o_intNumberOfPositionsRequired;)
        {
          loopCounter2 = loopCounter2 + 1;
          o_arrStrPositionsFromFile.AddAsLast(arrSubStrings.ElementAt( loopCounter2 -1));
        }
      }
    }
    Util2::Debug::TraceArray(Translate("arrSubStrings: "), arrSubStrings);
    Util2::Debug::TraceArray(Translate("o_arrStrPositionsFromFile: "), o_arrStrPositionsFromFile);
  }

  function ReadConfigFile( device & ML_STAR, variable i_strPathConfigFile, variable & i_arrIntProcessToPerform[], variable i_intNumberOfSamples, variable i_indexFormat, variable & i_arrIndexID1[], variable & i_arrIndexID2[], variable & i_arrIndexPos1[], variable & i_arrIndexPos2[], variable i_blnSimulationMode, variable i_blnODTC, variable i_blnTEST_MODE_DisableLoadingCarrierCommand, sequence & o_arrSequenceToAspirate[], variable & o_arrFltVolumesPerSample[], variable & o_arrStrReagentNames[], sequence & o_arrSeqStackMIDI[], sequence & o_arrSeqStackHSP[], sequence & o_arrSeqStackComfortLid[], variable & o_arrNumberOfTipsPerProcess[] ) void {
    private sequence arrSeqAspirateReagentsToExport[];
    private variable fileNGSConfig_PositionID;
    private variable fileNGSConfig_Labware_Type;
    private variable intTotalProcessToPerform;
    private variable intPositionInArray;
    private variable strTopText;
    private variable blnCarrierRequired;
    private variable blnCarrierLoadingCondition;
    private variable blnLoadingDialog;
    private variable intCurrentCarrierIndex;
    private variable fileNGSConfig_Reagent;
    private variable blnEditTipCounter;
    private variable strCarrierName;
    private variable fileNGSConfig_ProcessID;
    private variable intTotalReagents;
    private variable intPositionInArray2;
    private variable strSQLSentence;
    private variable strReagentName;
    private variable intProcessNumber;
    private variable strRGTLabwareId;
    private variable blnLoadCarrier;
    private variable fileNGSConfig_Liquid_Class_Name;
    private variable loopCounter1;
    private variable blnCarrierFoundInConfigFile;
    private variable fileNGSConfig_Maximum_Volume_Labware;
    private variable fileNGSConfig_Dead_Volume_Labware;
    private variable fileNGSConfig_ProcessNumber;
    private variable loopCounter2;
    private variable strTempPosId;
    private variable strTopImageFilePath;
    private variable loopCounter3;
    private variable intNumberOfPositionsRequired;
    private variable fltTotalVolumeRequired;
    private variable intTipTypeEdition;
    private variable loopCounter4;
    private variable strBarcodeString;
    private variable loopCounter5;
    private variable intTotalElementsInArray;
    private variable fileNGSConfig_Carrier;
    private variable fltVolumePerSample;
    private variable blnRecordFound;
    private variable fileNGSConfig_Dead_Volume_Reagent;
    private variable loopCounter6;
    private variable fileNGSConfig_Volume_per_Sample;
    private variable strBottomText;
    private variable fileNGSConfig_Name;
    private sequence seqTemp;
    private file fileNGSConfig;
    private variable arrDescriptions[];
    private variable _arrProcessIDs[];
    private variable arrStrCarrierNameRequired[];
    private variable arrColumnHeadersVolumes[];
    private variable arrStrSingleReagentName[];
    private variable arrayIndexIDs[];
    private variable arrPositions[];
    private variable _arrLabwareTypes[];
    private variable arrTempPosId[];
    private variable arrFltSingleVolumePerSample[];
    private variable arrStrCarrierToLoad[];
    private variable arrPositionsDefinedFromFile[];
    private variable arrFltTotalVolumePerSampleToExport[];
    private variable arrQuantities[];
    private variable arrStrProcessNumber[];
    private variable arrayIndexPositions[];
    private variable arrTempColumnHeaders[];
    private variable arrStrCarrierName[];
    private variable arrColumnHeadersLabware[];
    private variable arrFltTotalVolumePerSampleRequired[];
    private variable arrStrReagentName[];
    private variable arrStrReagentNameToExport[];
    private variable arrTempLabId[];
    private variable arrFltVolumePerSample[];
    private variable arrStrDistinctCarrierToLoad[];
    private variable arrStrSingleCarrierName[];
    private variable fltTotalVolumeRequiredExcludingDeadVolume;
    private variable fltVolumePerSampleThisRun;
    private variable intReturnFindString;
    private sequence seqStackComfortLid;
    private sequence seqStackHSP;
    private sequence seqStackMIDI;
    private variable intNewTrough;
    private variable intRGTPosition;
    private variable intCalculateRGTTrough;
    private variable intNumberOfTroughsPerCarrier;
    private variable intRGTCarrierNumber;
    private variable strRGTCarrierNumber;
    private variable _intNumberPlatesStack;
    private variable blnEnableFullTrace;
    o_arrSequenceToAspirate.SetSize( 0);
    o_arrFltVolumesPerSample.SetSize( 0);
    o_arrStrReagentNames.SetSize( 0);
    o_arrSeqStackMIDI.SetSize( 0);
    o_arrSeqStackHSP.SetSize( 0);
    o_arrSeqStackComfortLid.SetSize( 0);
    o_arrNumberOfTipsPerProcess.SetSize( 0);
    Util2::Debug::TraceArray(Translate(" >>> List of Processes to Perform: i_arrIntProcessToPerform: "), i_arrIntProcessToPerform);
    TrcTrace(Translate(">>> Number of Samples: "), i_intNumberOfSamples);
    TrcTrace(Translate(">>> Config File: "), i_strPathConfigFile);
    _intNumberOfSamplesRequired = i_intNumberOfSamples;
    _strPathConfigFile = i_strPathConfigFile;
    blnEnableFullTrace = ASWGLOBAL::BOOL::TRUE;
    intTotalProcessToPerform=i_arrIntProcessToPerform.GetSize();
    _intFirstProcess=i_arrIntProcessToPerform.GetAt(1-1);
    _intLastProcess=i_arrIntProcessToPerform.GetAt(intTotalProcessToPerform-1);
    Define_LabwareAssociation();
    Return_Resources(_strPathConfigFile, i_arrIntProcessToPerform);
    NGSSTARPROCESSES::DATA_HandoverSequencesAndDataToSMT(ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilterMPH, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 2, i_blnSimulationMode, Translate(""), ASWGLOBAL::BOOL::FALSE);
    SeqCopySequence(seqStackMIDI, ML_STAR.StackMIDI);
    SeqRemoveAll(seqStackMIDI);
    STACKREDUCER::StackReducer(_intNumberOfMIDIPlates, ML_STAR.StackMIDI, seqStackMIDI, 4, ML_STAR);
    CreateArrayOfSequencesFromSequence(seqStackMIDI, o_arrSeqStackMIDI);
    SeqCopySequence(seqStackHSP, ML_STAR.StackHSP);
    SeqRemoveAll(seqStackHSP);
    STACKREDUCER::StackReducer(_intNumberOfHSPPlates, ML_STAR.StackHSP, seqStackHSP, 5, ML_STAR);
    CreateArrayOfSequencesFromSequence(seqStackHSP, o_arrSeqStackHSP);
    if (i_blnODTC == ASWGLOBAL::BOOL::TRUE)
    {
      SeqCopySequence(seqStackComfortLid, ML_STAR.StackComfortLid);
      SeqRemoveAll(seqStackComfortLid);
      STACKREDUCER::StackReducer(_intNumberOfHamiltonComfortLids, ML_STAR.StackComfortLid, seqStackComfortLid, 4, ML_STAR);
      CreateArrayOfSequencesFromSequence(seqStackComfortLid, o_arrSeqStackComfortLid);
    }
    arrStrReagentName.SetSize(0);
    arrStrCarrierName.SetSize(0);
    arrStrProcessNumber.SetSize(0);
    arrFltSingleVolumePerSample.SetSize(0);
    arrStrSingleReagentName.SetSize(0);
    arrStrSingleCarrierName.SetSize(0);
    strSQLSentence = StrConcat12(Translate("Select * from [Reagents$] where"), Translate(""), Translate(""), Translate(""), Translate("[Labware Type] is not NULL"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    TrcTrace(Translate("strSQLSentence: "), strSQLSentence);
    fileNGSConfig.AddField("ProcessNumber", fileNGSConfig_ProcessNumber, hslInteger);
    fileNGSConfig.AddField("ProcessID", fileNGSConfig_ProcessID, hslString, 255);
    fileNGSConfig.AddField("Reagent", fileNGSConfig_Reagent, hslString, 255);
    fileNGSConfig.AddField("Name", fileNGSConfig_Name, hslString, 255);
    fileNGSConfig.AddField("Labware Type", fileNGSConfig_Labware_Type, hslString, 255);
    fileNGSConfig.AddField("Carrier", fileNGSConfig_Carrier, hslString, 255);
    fileNGSConfig.AddField("PositionID", fileNGSConfig_PositionID, hslString, 255);
    fileNGSConfig.AddField("Volume per Sample", fileNGSConfig_Volume_per_Sample, hslFloat);
    fileNGSConfig.AddField("Dead Volume Reagent", fileNGSConfig_Dead_Volume_Reagent, hslFloat);
    fileNGSConfig.AddField("Dead Volume Labware", fileNGSConfig_Dead_Volume_Labware, hslFloat);
    fileNGSConfig.AddField("Maximum Volume Labware", fileNGSConfig_Maximum_Volume_Labware, hslFloat);
    fileNGSConfig.AddField("Liquid Class Name", fileNGSConfig_Liquid_Class_Name, hslString, 255);
    if( 0 == fileNGSConfig.Open(i_strPathConfigFile + " " + "Reagents$", hslRead, strSQLSentence) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strPathConfigFile, "HxMetEdCompCmd");
    }
    {
      loopCounter2 = 0;
      while (
         (fileNGSConfig.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == fileNGSConfig.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        blnRecordFound = APPSLIB::ArrayLookup(arrStrReagentName, fileNGSConfig_Name, intPositionInArray);
        if (blnRecordFound == ASWGLOBAL::BOOL::FALSE)
        {
          arrStrProcessNumber.AddAsLast(fileNGSConfig_ProcessNumber);
          arrStrReagentName.AddAsLast(fileNGSConfig_Name);
          arrStrCarrierName.AddAsLast(fileNGSConfig_Carrier);
        }
        arrStrSingleReagentName.AddAsLast(fileNGSConfig_Name);
        arrStrSingleCarrierName.AddAsLast(fileNGSConfig_Carrier);
        arrFltSingleVolumePerSample.AddAsLast(fileNGSConfig_Volume_per_Sample);
      }
    }
    if( 0 != fileNGSConfig.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileNGSConfig.RemoveFields();
    Util2::Debug::TraceArray(Translate("arrStrReagentName: "), arrStrReagentName);
    Util2::Debug::TraceArray(Translate("arrStrCarrierName: "), arrStrCarrierName);
    arrStrCarrierToLoad.SetSize(0);
    strSQLSentence = StrConcat12(Translate("Select distinct [Carrier] from [Reagents$] where"), Translate(" [ProcessNumber] >= "), _intFirstProcess, Translate(" AND [ProcessNumber] <= "), _intLastProcess, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    TrcTrace(Translate("strSQLSentence: "), strSQLSentence);
    fileNGSConfig.AddField("Carrier", fileNGSConfig_Carrier, hslString, 255);
    if( 0 == fileNGSConfig.Open(i_strPathConfigFile + " " + "Reagents$", hslRead, strSQLSentence) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strPathConfigFile, "HxMetEdCompCmd");
    }
    {
      loopCounter5 = 0;
      while (
         (fileNGSConfig.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == fileNGSConfig.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        arrStrCarrierToLoad.AddAsLast(fileNGSConfig_Carrier);
      }
    }
    if( 0 != fileNGSConfig.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileNGSConfig.RemoveFields();
    Util2::Debug::TraceArray(Translate("arrStrCarrierToLoad: "), arrStrCarrierToLoad);
    intTotalReagents=arrStrReagentName.GetSize();
    arrSeqAspirateReagentsToExport.SetSize(0);
    arrStrReagentNameToExport.SetSize(0);
    arrFltTotalVolumePerSampleToExport.SetSize(0);
    arrFltTotalVolumePerSampleRequired.SetSize(0);
    arrStrCarrierNameRequired.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < intTotalReagents;)
      {
        loopCounter1 = loopCounter1 + 1;
        intProcessNumber=arrStrProcessNumber.GetAt(loopCounter1-1);
        strReagentName=arrStrReagentName.GetAt(loopCounter1-1);
        strCarrierName=arrStrCarrierName.GetAt(loopCounter1-1);
        TrcTrace(Translate(">>> Calculate Total Volume and Number of Positions required for reagent: "), arrStrReagentName.ElementAt( loopCounter1 -1));
        CalculateTotalVolumeReagent(arrStrReagentName.ElementAt( loopCounter1 -1), fltTotalVolumeRequired, fltTotalVolumeRequiredExcludingDeadVolume, intNumberOfPositionsRequired, arrPositionsDefinedFromFile, fltVolumePerSample, arrFltVolumePerSample, fltVolumePerSampleThisRun);
        if (blnEnableFullTrace == ASWGLOBAL::BOOL::TRUE)
        {
          TrcTrace(Translate(">>>>>> Total Volume: "), fltTotalVolumeRequired);
          TrcTrace(Translate(">>>>>> Positions Required: "), intNumberOfPositionsRequired);
          TrcTrace(Translate(">>>>>> Carrier Required: "), strCarrierName);
        }
        blnRecordFound = APPSLIB::ArrayLookup(_arrStrCarrierNameInConfigFile, strCarrierName, intPositionInArray);
        if (blnRecordFound == ASWGLOBAL::BOOL::TRUE)
        {
          arrTempLabId.SetSize(0);
          arrTempPosId.SetSize(0);
          {
            for(loopCounter3 = 0; loopCounter3 < intNumberOfPositionsRequired;)
            {
              loopCounter3 = loopCounter3 + 1;
              intReturnFindString = StrFind(strCarrierName, Translate("RGT"));
              if (intReturnFindString >= 0)
              {
                intNumberOfTroughsPerCarrier = 5;
                strRGTCarrierNumber = StrRight(strCarrierName, 1);
                intRGTCarrierNumber = StrIVal(strRGTCarrierNumber);
                intCalculateRGTTrough = intRGTCarrierNumber - 1;
                intCalculateRGTTrough = intCalculateRGTTrough * intNumberOfTroughsPerCarrier;
                intRGTPosition = StrIVal(arrPositionsDefinedFromFile.ElementAt( loopCounter3 -1));
                intNewTrough = intRGTPosition + intCalculateRGTTrough;
                if (intNewTrough <= intNumberOfTroughsPerCarrier)
                {
                  strRGTLabwareId = StrConcat4(_arrLabwareIdOnDeck.ElementAt( intPositionInArray -1), arrPositionsDefinedFromFile.ElementAt( loopCounter3 -1), Translate(""), Translate(""));
                }
                else
                {
                  strRGTLabwareId = StrConcat4(_arrLabwareIdOnDeck.ElementAt( intPositionInArray -1), intNewTrough, Translate(""), Translate(""));
                }
                {
                  for(loopCounter4 = 0; loopCounter4 < 8;)
                  {
                    loopCounter4 = loopCounter4 + 1;
                    strTempPosId = StrIStr(loopCounter4);
                    arrTempPosId.AddAsLast(strTempPosId);
                    arrTempLabId.AddAsLast(strRGTLabwareId);
                  }
                }
              }
              else
              {
                arrTempLabId.AddAsLast(_arrLabwareIdOnDeck.ElementAt( intPositionInArray -1));
                arrTempPosId.AddAsLast(arrPositionsDefinedFromFile.ElementAt( loopCounter3 -1));
              }
            }
          }
          SEQUENCEINARRAYTOOLS::SequenceFromArray(arrTempLabId, arrTempPosId, seqTemp);
          seqTemp.SetCurrentPosition(1);
          if (blnEnableFullTrace == ASWGLOBAL::BOOL::TRUE)
          {
            TrcTraceSequence(seqTemp);
          }
          arrSeqAspirateReagentsToExport.AddAsLast(seqTemp);
          arrStrReagentNameToExport.AddAsLast(strReagentName);
          arrStrCarrierNameRequired.AddAsLast(strCarrierName);
          arrFltTotalVolumePerSampleToExport.AddAsLast(fltVolumePerSampleThisRun);
          arrFltTotalVolumePerSampleRequired.AddAsLast(fltTotalVolumeRequiredExcludingDeadVolume);
          SeqRemoveAll(seqTemp);
        }
        else
        {
          TrcTrace12(Translate("******************** ERROR:::"), Translate(""), Translate("The Carrier "), strCarrierName, Translate(" has not been defined. A sequence cannot be created for this Reagent"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        TrcTrace(Translate("----------------------------------------------------------------------------------------------------"), Translate(""));
      }
    }
    ARRAYTOOLS::get_distinct_from_array(arrStrCarrierToLoad, arrStrDistinctCarrierToLoad);
    Util2::Debug::TraceArray(Translate("arrStrDistinctCarrierToLoad: "), arrStrDistinctCarrierToLoad);
    MECC::TraceComment(Translate(">>>>Summary of total volume (µL) required per reagent (Reagents not used in this run are displayed as 0.00000)"));
    Util2::Debug::TraceArray_4(Translate("Reagent Name ----------- Carrier Name ----------- TotalVolumePerSample(µL) --------- TotalVolumeForAllSamples(µL)"), arrStrReagentNameToExport, arrStrCarrierNameRequired, arrFltTotalVolumePerSampleToExport, arrFltTotalVolumePerSampleRequired);
    _arrStrReagentNameToExport=arrStrReagentNameToExport;
    _arrStrCarrierNameRequired=arrStrCarrierNameRequired;
    _arrFltTotalVolumePerSampleToExport=arrFltTotalVolumePerSampleToExport;
    _arrFltTotalVolumePerSampleRequired=arrFltTotalVolumePerSampleRequired;
    MECC::TraceComment(Translate(">>>> Lists of output records: individual volumes (µL) to use within each Process (Process01, Process02, Process03, ... )"));
    Util2::Debug::TraceArray_3(Translate("CARRIER     VOLUME (µL)     REAGENT"), arrStrSingleCarrierName, arrFltSingleVolumePerSample, arrStrSingleReagentName);
    o_arrStrReagentNames=arrStrSingleReagentName;
    o_arrFltVolumesPerSample=arrFltSingleVolumePerSample;
    o_arrSequenceToAspirate=arrSeqAspirateReagentsToExport;
    o_arrNumberOfTipsPerProcess=t_arr_NumberOfTipsPerProcess;
    Util2::Debug::TraceArray(Translate("o_arrNumberOfTipsPerProcess: "), o_arrNumberOfTipsPerProcess);
    arrPositions.SetSize(0);
    arrQuantities.SetSize(0);
    arrDescriptions.SetSize(0);
    arrColumnHeadersLabware.SetSize(3);
    arrColumnHeadersLabware.SetAt(1-1, Translate("Position"));
    arrColumnHeadersLabware.SetAt(2-1, Translate("Quantity"));
    arrColumnHeadersLabware.SetAt(3-1, Translate("Description"));
    arrColumnHeadersVolumes.SetSize(0);
    arrColumnHeadersVolumes.AddAsLast(Translate("Position"));
    arrColumnHeadersVolumes.AddAsLast(Translate("Volume"));
    arrColumnHeadersVolumes.AddAsLast(Translate("Description"));
    blnCarrierRequired = APPSLIB::ArrayLookup(arrStrCarrierToLoad, Translate("CPAC"), intPositionInArray2);
    TrcTrace12(Translate(">>>>>>>>>>>>>> Find data for carrier: "), Translate("CPAC"), Translate("   ---  Is this carrier required for this run? "), blnCarrierRequired, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    if (blnCarrierRequired == ASWGLOBAL::BOOL::TRUE)
    {
      strBottomText = Translate("Press OK to continue");
      strTopText = Translate("Prepare Mastermix Tubes according to instructions below");
      strBottomText = Translate("Press OK to continue");
      strTopImageFilePath = Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Pictures\VialRemovableAdapterPos24CPAC_AlphaNumeric.png");
      CalculateResourcesForDialog(Translate("CPAC"), i_arrIntProcessToPerform, _intNumberOfSamplesRequired, 1, strTopImageFilePath, strTopText, strBottomText, _arrPositions, _arrQuantities, _arrDescriptions, _arrProcessIDs, _arrLabwareTypes);
    }
    ARRAYTOOLS::removeValueFromArray_basedOnIndex(arrStrCarrierToLoad, intPositionInArray2);
    {
      for(intCurrentCarrierIndex = 0; intCurrentCarrierIndex < _intNumberOfLoadableCarriers;)
      {
        intCurrentCarrierIndex = intCurrentCarrierIndex + 1;
        blnCarrierLoadingCondition=_arrLoadableCarriers.GetAt(intCurrentCarrierIndex-1);
        strCarrierName=_arrDeckCarriersID.GetAt(intCurrentCarrierIndex-1);
        blnCarrierFoundInConfigFile = APPSLIB::ArrayLookup(_arrCarrierIdForConfigFile, _arrDeckCarriersID.ElementAt( intCurrentCarrierIndex -1), intPositionInArray);
        TrcTrace12(Translate(">>>>>>>>>>>>>> Find data for carrier: "), _arrDeckCarriersID.ElementAt( intCurrentCarrierIndex -1), Translate("   ---  Is this carrier present in the Config File? "), blnCarrierFoundInConfigFile, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        if (blnCarrierFoundInConfigFile == ASWGLOBAL::BOOL::TRUE)
        {
          strBarcodeString = Translate("");
          blnCarrierRequired = APPSLIB::ArrayLookup(arrStrCarrierToLoad, _arrStrCarrierNameInConfigFile.ElementAt( intPositionInArray -1), intPositionInArray2);
          TrcTrace12(Translate(">>>>>>>>>>>>>> Find data for carrier: "), _arrStrCarrierNameInConfigFile.ElementAt( intPositionInArray -1), Translate("   ---  Is this carrier required for this run? "), blnCarrierRequired, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          if (blnCarrierRequired == ASWGLOBAL::BOOL::TRUE)
          {
            strTopImageFilePath=_arrStrPathPictureCarrierInConfigFile.GetAt(intPositionInArray-1);
            strTopText=_arrStrTopTextForCarriersInConfigFile.GetAt(intPositionInArray-1);
            strBottomText = Translate("Press OK to continue");
            CalculateResourcesForDialog(_arrStrCarrierNameInConfigFile.ElementAt( intPositionInArray -1), i_arrIntProcessToPerform, _intNumberOfSamplesRequired, 1, strTopImageFilePath, strTopText, strBottomText, _arrPositions, _arrQuantities, _arrDescriptions, _arrProcessIDs, _arrLabwareTypes);
            blnLoadingDialog = ASWGLOBAL::BOOL::FALSE;
            blnLoadCarrier = ASWGLOBAL::BOOL::TRUE;
            blnEditTipCounter = ASWGLOBAL::BOOL::FALSE;
          }
          else
          {
            blnLoadingDialog = ASWGLOBAL::BOOL::FALSE;
            blnLoadCarrier = ASWGLOBAL::BOOL::FALSE;
            blnEditTipCounter = ASWGLOBAL::BOOL::FALSE;
          }
        }
        if (intCurrentCarrierIndex == 1)
        {
          MECC::TraceComment(Translate("ODTC"));
          if (_intNumberOfHamiltonComfortLids != 0)
          {
            if (i_blnODTC == ASWGLOBAL::BOOL::TRUE)
            {
              strTopText = Translate("Loading ODTC Carrier");
              strBottomText = Translate("Press OK to continue");
              strTopImageFilePath=_arrTopPicturesStrPaths.GetAt(intCurrentCarrierIndex-1);
              _LoadingDialogAddRowWithData(Translate("Parking Lid Position"), _intNumberOfHamiltonComfortLids, Translate("Hamilton ComforLid"));
              blnLoadingDialog = ASWGLOBAL::BOOL::TRUE;
              blnLoadCarrier = ASWGLOBAL::BOOL::TRUE;
              arrTempColumnHeaders=arrColumnHeadersLabware;
            }
            else
            {
              blnLoadingDialog = ASWGLOBAL::BOOL::FALSE;
              blnLoadCarrier = ASWGLOBAL::BOOL::FALSE;
            }
            blnEditTipCounter = ASWGLOBAL::BOOL::FALSE;
          }
        }
        if (intCurrentCarrierIndex == 2)
        {
          _intNumberPlatesStack = 0;
          _intNumberPlatesStack = _intNumberMIDIStack1 + _intNumberMIDIStack2 + _intNumberMIDIStack3 + _intNumberOfHSPPlates;
          if (_intNumberPlatesStack > 0)
          {
            blnLoadCarrier = ASWGLOBAL::BOOL::TRUE;
          }
          else
          {
            blnLoadCarrier = ASWGLOBAL::BOOL::FALSE;
          }
          if (_intNumberMIDIStack1 > 0)
          {
            _LoadingDialogAddRowWithData(Translate("1"), _intNumberMIDIStack1, Translate("New MIDI plates"));
          }
          if (_intNumberMIDIStack2 > 0)
          {
            _LoadingDialogAddRowWithData(Translate("2"), _intNumberMIDIStack2, Translate("New MIDI plates"));
          }
          if (_intNumberMIDIStack3 > 0)
          {
            _LoadingDialogAddRowWithData(Translate("3"), _intNumberMIDIStack3, Translate("New MIDI plates"));
          }
          if (_intNumberOfHSPPlates > 0)
          {
            _LoadingDialogAddRowWithData(Translate("4"), _intNumberOfHSPPlates, Translate("New HSP plates"));
          }
          if (blnLoadCarrier == ASWGLOBAL::BOOL::TRUE)
          {
            strTopText = Translate("Loading Plate Stack Carrier in Track -1");
            strBottomText = Translate("Press OK to continue");
            strTopImageFilePath=_arrTopPicturesStrPaths.GetAt(intCurrentCarrierIndex-1);
            strBarcodeString = Translate("");
            blnLoadingDialog = ASWGLOBAL::BOOL::TRUE;
            arrTempColumnHeaders=arrColumnHeadersLabware;
          }
          else
          {
            blnLoadingDialog = ASWGLOBAL::BOOL::FALSE;
          }
          blnEditTipCounter = ASWGLOBAL::BOOL::FALSE;
        }
        if (_intNumberOf50uLTips > 0)
        {
          if (intCurrentCarrierIndex == 3)
          {
            MECC::TraceComment(Translate("Tip Carrier 50tips 1"));
            strTopText = Translate("Loading 50µL Filtered Tips Carriers in Tracks 6 to 17");
            strBottomText = Translate("Press OK to continue");
            strTopImageFilePath=_arrTopPicturesStrPaths.GetAt(intCurrentCarrierIndex-1);
            _LoadingDialogAddRowWithData(Translate("50µL Filtered Tips Carriers"), _intNumberOf50uLTips, Translate("50µL Filtered Tips"));
            strBarcodeString = Translate("?");
            intTipTypeEdition = 1;
            blnLoadingDialog = ASWGLOBAL::BOOL::TRUE;
            arrTempColumnHeaders=arrColumnHeadersLabware;
            if (_intNumberOf50uLTips > 0)
            {
              blnLoadCarrier = ASWGLOBAL::BOOL::TRUE;
              blnEditTipCounter = ASWGLOBAL::BOOL::TRUE;
            }
          }
          if (intCurrentCarrierIndex == 4)
          {
            if (_intNumberOf50uLTips > 0)
            {
              blnLoadCarrier = ASWGLOBAL::BOOL::TRUE;
            }
            else
            {
              blnLoadCarrier = ASWGLOBAL::BOOL::FALSE;
            }
            blnEditTipCounter = ASWGLOBAL::BOOL::FALSE;
            blnLoadingDialog = ASWGLOBAL::BOOL::FALSE;
          }
        }
        else
        {
          if (intCurrentCarrierIndex >= 3)
          {
            if (intCurrentCarrierIndex <= 4)
            {
              blnLoadingDialog = ASWGLOBAL::BOOL::FALSE;
              blnLoadCarrier = ASWGLOBAL::BOOL::FALSE;
              blnEditTipCounter = ASWGLOBAL::BOOL::FALSE;
            }
          }
        }
        if (_intNumberOf300uLTips > 0)
        {
          if (intCurrentCarrierIndex == 5)
          {
            strTopText = Translate("Loading 300µL Filtered Tips Carriers in Tracks 18 to 29");
            strBottomText = Translate("Press OK to continue");
            strTopImageFilePath=_arrTopPicturesStrPaths.GetAt(intCurrentCarrierIndex-1);
            _LoadingDialogAddRowWithData(Translate("300µL Filtered Tips Carriers"), _intNumberOf300uLTips, Translate("300µL Filtered Tips"));
            strBarcodeString = Translate("?");
            intTipTypeEdition = 2;
            blnLoadingDialog = ASWGLOBAL::BOOL::TRUE;
            arrTempColumnHeaders=arrColumnHeadersLabware;
            if (_intNumberOf300uLTips > 0)
            {
              blnLoadCarrier = ASWGLOBAL::BOOL::TRUE;
              blnEditTipCounter = ASWGLOBAL::BOOL::TRUE;
            }
          }
          if (intCurrentCarrierIndex == 6)
          {
            if (_intNumberOf300uLTips > 0)
            {
              blnLoadCarrier = ASWGLOBAL::BOOL::TRUE;
            }
            else
            {
              blnLoadCarrier = ASWGLOBAL::BOOL::FALSE;
            }
            blnEditTipCounter = ASWGLOBAL::BOOL::FALSE;
            blnLoadingDialog = ASWGLOBAL::BOOL::FALSE;
          }
        }
        else
        {
          if (intCurrentCarrierIndex >= 5)
          {
            if (intCurrentCarrierIndex <= 6)
            {
              blnLoadingDialog = ASWGLOBAL::BOOL::FALSE;
              blnLoadCarrier = ASWGLOBAL::BOOL::FALSE;
              blnEditTipCounter = ASWGLOBAL::BOOL::FALSE;
            }
          }
        }
        if(0){
          if (intCurrentCarrierIndex == 7)
          {
            MECC::TraceComment(Translate("RGT 1"));
            if (blnRecordFound == ASWGLOBAL::BOOL::TRUE)
            {
            }
            else
            {
            }
          }
          if (intCurrentCarrierIndex == 8)
          {
            MECC::TraceComment(Translate("RGT 2"));
            if (blnRecordFound == ASWGLOBAL::BOOL::TRUE)
            {
            }
            else
            {
            }
          }
          if (intCurrentCarrierIndex == 9)
          {
            MECC::TraceComment(Translate("24 Tube Carrier"));
            if (blnRecordFound == ASWGLOBAL::BOOL::TRUE)
            {
            }
            else
            {
            }
          }
          if (intCurrentCarrierIndex == 10)
          {
            MECC::TraceComment(Translate("32 Vial 1"));
            if (blnRecordFound == ASWGLOBAL::BOOL::TRUE)
            {
            }
            else
            {
            }
          }
          if (intCurrentCarrierIndex == 13)
          {
            MECC::TraceComment(Translate("CPAC"));
            if (blnRecordFound == ASWGLOBAL::BOOL::TRUE)
            {
            }
            else
            {
            }
          }
        }
        if (intCurrentCarrierIndex == 11)
        {
          MECC::TraceComment(Translate("32 Vial Indexes"));
          if (i_indexFormat == "tube")
          {
            strTopText = Translate("Loading 32 Index Vials Carrier on Track 34");
            strBottomText = Translate("Press OK to continue");
            strBarcodeString = Translate("");
            arrTempColumnHeaders=arrColumnHeadersVolumes;
            ARRAYTOOLS::mergeArrays(i_arrIndexID1, i_arrIndexID2, arrayIndexIDs);
            ARRAYTOOLS::mergeArrays(i_arrIndexPos1, i_arrIndexPos2, arrayIndexPositions);
            _arrDescriptions=arrayIndexIDs;
            _arrPositions=arrayIndexPositions;
            intTotalElementsInArray=arrayIndexPositions.GetSize();
            {
              for(loopCounter6 = 0; loopCounter6 < intTotalElementsInArray;)
              {
                loopCounter6 = loopCounter6 + 1;
                _arrQuantities.AddAsLast(Translate(""));
              }
            }
            strTopImageFilePath=_arrTopPicturesStrPaths.GetAt(intCurrentCarrierIndex-1);
            blnLoadingDialog = ASWGLOBAL::BOOL::TRUE;
            blnLoadCarrier = ASWGLOBAL::BOOL::TRUE;
          }
          else
          {
            blnLoadingDialog = ASWGLOBAL::BOOL::FALSE;
            blnLoadCarrier = ASWGLOBAL::BOOL::FALSE;
          }
          blnEditTipCounter = ASWGLOBAL::BOOL::FALSE;
        }
        if (intCurrentCarrierIndex == 12)
        {
          MECC::TraceComment(Translate("Plate Tip Carrier"));
          strTopText = Translate("Loading Plate and Tip Carrier on Track 35 to 40");
          strBottomText = Translate("Press OK to continue");
          if (_intNumberOf1000uLTips != 0)
          {
            strBarcodeString = Translate("TIP1,TIP2");
            _LoadingDialogAddRowWithData(Translate("1 and 2"), _intNumberOf1000uLTips, Translate("1000µL Filtered Tips"));
            intTipTypeEdition = 4;
            blnEditTipCounter = ASWGLOBAL::BOOL::TRUE;
          }
          else
          {
            strBarcodeString = Translate("");
            blnEditTipCounter = ASWGLOBAL::BOOL::FALSE;
          }
          _LoadingDialogAddRowWithData(Translate("3"), Translate("1"), Translate("gDNA Input HSP Plate"));
          if (i_indexFormat == "plate")
          {
            if (_intFirstProcess == 9)
            {
              MECC::TraceComment(Translate("Only load the primer index plate if we are starting with process 9"));
              _LoadingDialogAddRowWithData(Translate("4"), Translate("1"), Translate("Index Plate"));
              strTopImageFilePath=_arrTopPicturesStrPaths.GetAt(intCurrentCarrierIndex-1);
            }
            else
            {
              MECC::TraceComment(Translate("Only load the primer index plate if we are starting with process 9\nSTART Process is not equal to 9. --> postponed laoding might be active and no primer plate needs to be laoded at the beginning."));
              strTopImageFilePath=_arrTopPicturesStrPaths.GetAt(intCurrentCarrierIndex-1);
            }
          }
          else
          {
            strTopImageFilePath=_arrTopPicturesStrPaths.GetAt(intCurrentCarrierIndex-1);
          }
          blnLoadingDialog = ASWGLOBAL::BOOL::TRUE;
          blnLoadCarrier = ASWGLOBAL::BOOL::TRUE;
          arrTempColumnHeaders=arrColumnHeadersLabware;
        }
        if (i_blnTEST_MODE_DisableLoadingCarrierCommand == ASWGLOBAL::BOOL::TRUE)
        {
          blnLoadCarrier = ASWGLOBAL::BOOL::FALSE;
        }
        if (blnCarrierLoadingCondition == ASWGLOBAL::BOOL::TRUE)
        {
          if (blnLoadCarrier == ASWGLOBAL::BOOL::TRUE)
          {
            ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
          }
        }
        if (blnLoadingDialog == ASWGLOBAL::BOOL::TRUE)
        {
          _Loading(arrTempColumnHeaders, strTopText, strBottomText, strTopImageFilePath, 800, _arrPositions, _arrQuantities, _arrDescriptions);
        }
        if (blnEditTipCounter == ASWGLOBAL::BOOL::TRUE)
        {
          NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, _intNumberOf50uLTips, _intNumberOf300uLTips, _intNumberOf300uLTipsMPH, _intNumberOf1000uLTips, intTipTypeEdition, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
        }
        TrcTrace(Translate(" >>> Is the carrier loadable? "), blnCarrierLoadingCondition);
        if (blnCarrierLoadingCondition == ASWGLOBAL::BOOL::TRUE)
        {
          TrcTrace(Translate(" >>>  Does the carrier need to be loaded? "), blnLoadCarrier);
          if (blnLoadCarrier == ASWGLOBAL::BOOL::TRUE)
          {
            ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
          }
        }
      }
    }
  }

  private function CreateArrayOfSequencesFromSequence( sequence & i_sequence, sequence & o_arrayOfSequences[] ) void {
    private variable intPositionInArray;
    private variable strTempLabId;
    private variable loopCounter1;
    private variable blnRecordFound;
    private variable arrTempLabId[];
    private variable tempLabId;
    private variable intTotalLabIds;
    private variable tempPosId;
    private sequence temp_sequence;
    private variable currentLabId;
    private variable loopCounterSeq;
    o_arrayOfSequences.SetSize( 0);
    arrTempLabId.SetSize(0);
    o_arrayOfSequences.SetSize(0);
    i_sequence.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (i_sequence.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_sequence, 1);
        loopCounter1 = loopCounter1 + 1;
        strTempLabId = SeqGetLabwareId(i_sequence);
        blnRecordFound = APPSLIB::ArrayLookup(arrTempLabId, strTempLabId, intPositionInArray);
        if (blnRecordFound == ASWGLOBAL::BOOL::FALSE)
        {
          arrTempLabId.AddAsLast(strTempLabId);
        }
        SeqIncrement(i_sequence, 1);
        if (
           (i_sequence.GetCurrentPosition() > 0 && i_sequence.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_sequence.SetMax(i_sequence.GetTotal());
      i_sequence.SetCurrentPosition(1);
    }
    Util2::Debug::TraceArray(Translate("arrTempLabId of Sequences: "), arrTempLabId);
    intTotalLabIds=arrTempLabId.GetSize();
    SeqCopySequence(temp_sequence, i_sequence);
    {
      for(currentLabId = 0; currentLabId < intTotalLabIds;)
      {
        currentLabId = currentLabId + 1;
        SeqRemoveAll(temp_sequence);
        strTempLabId=arrTempLabId.GetAt(currentLabId-1);
        i_sequence.SetCurrentPosition(1);
        {
          loopCounterSeq = 0;
          while (
             (i_sequence.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_sequence, 1);
            loopCounterSeq = loopCounterSeq + 1;
            tempLabId = SeqGetLabwareId(i_sequence);
            tempPosId = SeqGetPositionId(i_sequence);
            if (tempLabId == strTempLabId)
            {
              SeqAdd(temp_sequence, tempLabId, tempPosId);
            }
            SeqIncrement(i_sequence, 1);
            if (
               (i_sequence.GetCurrentPosition() > 0 && i_sequence.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_sequence.SetMax(i_sequence.GetTotal());
          i_sequence.SetCurrentPosition(1);
        }
        temp_sequence.SetCurrentPosition(1);
        o_arrayOfSequences.AddAsLast(temp_sequence);
      }
    }
  }

  private function CalculateNumberOfTubesAndVolumePerTube_Rev2( variable i_str_ReagentName, variable i_int_NumberOfSamples, variable i_flt_VolumePerSample, variable i_flt_MaximumContainerVolume, variable i_flt_DeadVolumeLabware, variable i_flt_DeadVolumeReagent, variable & o_int_NumberOfContainersNeeded, variable & o_arr_VolumesPerContainer[], variable & o_arr_DescriptionForDialog[] ) void {
    private variable l_int_NumberOfSamplesPerContainerPlusExtraSample;
    private variable l_flt_TotalVolumePerContainer;
    private variable l_str_Description1;
    private variable l_int_RemainingNumberOfContainers;
    private variable l_flt_TotalVolumeNeeded;
    private variable l_int_NumberOfSamplesPerContainer;
    private variable l_str_Description2;
    private variable l_flt_VolumePerSampleIncludingDeadVolume;
    private variable l_str_Description;
    private variable l_str_TotalVolumePerContainer;
    private variable l_int_RemainingNumberOfSamples;
    private variable l_int_NumberOfContainersNeeded;
    private variable l_str_UnitsVolume;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable l_MaximumContainerVolumeExcludingDeadVolume;
    private variable l_int_MaximumNumberSamplesPerContainer;
    private variable l_flt_TotalVolumePerContainerML;
    private variable l_arr_VolumePerContainer[];
    private variable l_arr_DescriptionForDialog[];
    o_int_NumberOfContainersNeeded = 0;
    o_arr_VolumesPerContainer.SetSize( 0);
    o_arr_DescriptionForDialog.SetSize( 0);
    TrcTrace(Translate(" ----------------------- Input Parameters: "), i_str_ReagentName);
    TrcTrace(Translate("-------------- i_flt_DeadVolumeLabware: "), i_flt_DeadVolumeLabware);
    TrcTrace(Translate("-------------- i_flt_DeadVolumeReagent: "), i_flt_DeadVolumeReagent);
    TrcTrace(Translate("-------------- i_flt_MaximumContainerVolume: "), i_flt_MaximumContainerVolume);
    TrcTrace(Translate("-------------- i_flt_VolumePerSample: "), i_flt_VolumePerSample);
    TrcTrace(Translate("-------------- i_int_NumberOfSamples: "), i_int_NumberOfSamples);
    TrcTrace(Translate(" ----------- Calculations -----------"), Translate(""));
    i_flt_DeadVolumeReagent = 1 + i_flt_DeadVolumeReagent;
    l_flt_TotalVolumeNeeded = i_int_NumberOfSamples * i_flt_VolumePerSample;
    l_flt_TotalVolumeNeeded = l_flt_TotalVolumeNeeded * i_flt_DeadVolumeReagent;
    TrcTrace(Translate("-------------- l_flt_TotalVolumeNeeded: "), l_flt_TotalVolumeNeeded);
    l_MaximumContainerVolumeExcludingDeadVolume = i_flt_MaximumContainerVolume - i_flt_DeadVolumeLabware;
    l_int_NumberOfContainersNeeded = l_flt_TotalVolumeNeeded / (l_MaximumContainerVolumeExcludingDeadVolume * 1.0);
    l_int_NumberOfContainersNeeded = MthCeiling(l_int_NumberOfContainersNeeded);
    l_int_NumberOfContainersNeeded = l_flt_TotalVolumeNeeded / (l_MaximumContainerVolumeExcludingDeadVolume * 1.0);
    l_flt_VolumePerSampleIncludingDeadVolume = i_flt_VolumePerSample * i_flt_DeadVolumeReagent;
    l_int_MaximumNumberSamplesPerContainer = l_MaximumContainerVolumeExcludingDeadVolume / (l_flt_VolumePerSampleIncludingDeadVolume * 1.0);
    l_int_MaximumNumberSamplesPerContainer = MthFloor(l_int_MaximumNumberSamplesPerContainer);
    TrcTrace(Translate("-------------- l_int_MaximumNumberSamplesPerContainer: "), l_int_MaximumNumberSamplesPerContainer);
    l_int_NumberOfContainersNeeded = i_int_NumberOfSamples / (l_int_MaximumNumberSamplesPerContainer * 1.0);
    l_int_NumberOfContainersNeeded = MthCeiling(l_int_NumberOfContainersNeeded);
    TrcTrace(Translate("-------------- Recalculation = l_int_NumberOfContainersNeeded: "), l_int_NumberOfContainersNeeded);
    l_str_Description = Translate("");
    l_str_Description = StrConcat12(Translate("   "), i_str_ReagentName, Translate(" "), Translate("\t\t"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    l_flt_TotalVolumePerContainer = 0.0;
    l_arr_VolumePerContainer.SetSize(0);
    l_arr_DescriptionForDialog.SetSize(0);
    l_int_NumberOfSamplesPerContainer = i_int_NumberOfSamples / (l_int_NumberOfContainersNeeded * 1.0);
    l_int_NumberOfSamplesPerContainer = MthFloor(l_int_NumberOfSamplesPerContainer);
    l_int_RemainingNumberOfSamples = i_int_NumberOfSamples % l_int_NumberOfContainersNeeded;
    if (l_int_RemainingNumberOfSamples != 0)
    {
      l_int_NumberOfSamplesPerContainerPlusExtraSample = l_int_NumberOfSamplesPerContainer + 1;
      l_flt_TotalVolumePerContainer = ((l_int_NumberOfSamplesPerContainerPlusExtraSample * i_flt_VolumePerSample)* i_flt_DeadVolumeReagent) + i_flt_DeadVolumeLabware;
      l_flt_TotalVolumePerContainer = MthRound(l_flt_TotalVolumePerContainer, 1);
      l_int_RemainingNumberOfContainers = l_int_NumberOfContainersNeeded;
      {
        for(loopCounter2 = 0; loopCounter2 < l_int_RemainingNumberOfSamples;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (l_flt_TotalVolumePerContainer > 3000)
          {
            l_str_UnitsVolume = Translate("mL");
            l_flt_TotalVolumePerContainerML = l_flt_TotalVolumePerContainer / (1000 * 1.0);
            ReformatStringFloatDecimalPoints(l_flt_TotalVolumePerContainerML, l_str_TotalVolumePerContainer);
          }
          else
          {
            l_str_TotalVolumePerContainer = l_flt_TotalVolumePerContainer;
            l_str_UnitsVolume = Translate("µL");
          }
          l_str_Description1 = StrConcat12(l_str_Description, l_str_TotalVolumePerContainer, Translate("  "), l_str_UnitsVolume, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          l_arr_DescriptionForDialog.AddAsLast(l_str_Description1);
          l_arr_VolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
          l_int_RemainingNumberOfContainers = l_int_RemainingNumberOfContainers - 1;
        }
      }
      l_flt_TotalVolumePerContainer = ((l_int_NumberOfSamplesPerContainer * i_flt_VolumePerSample)* i_flt_DeadVolumeReagent) + i_flt_DeadVolumeLabware;
      l_flt_TotalVolumePerContainer = MthRound(l_flt_TotalVolumePerContainer, 1);
      {
        for(loopCounter1 = 0; loopCounter1 < l_int_RemainingNumberOfContainers;)
        {
          loopCounter1 = loopCounter1 + 1;
          if (l_flt_TotalVolumePerContainer > 3000)
          {
            l_str_UnitsVolume = Translate("mL");
            l_flt_TotalVolumePerContainerML = l_flt_TotalVolumePerContainer / (1000 * 1.0);
            ReformatStringFloatDecimalPoints(l_flt_TotalVolumePerContainerML, l_str_TotalVolumePerContainer);
          }
          else
          {
            l_str_TotalVolumePerContainer = l_flt_TotalVolumePerContainer;
            l_str_UnitsVolume = Translate("µL");
          }
          l_str_Description2 = StrConcat12(l_str_Description, l_str_TotalVolumePerContainer, Translate("  "), l_str_UnitsVolume, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          l_arr_DescriptionForDialog.AddAsLast(l_str_Description2);
          l_arr_VolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
        }
      }
    }
    else
    {
      l_flt_TotalVolumePerContainer = ((l_int_NumberOfSamplesPerContainer * i_flt_VolumePerSample)* i_flt_DeadVolumeReagent) + i_flt_DeadVolumeLabware;
      l_flt_TotalVolumePerContainer = MthRound(l_flt_TotalVolumePerContainer, 1);
      {
        for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfContainersNeeded;)
        {
          loopCounter1 = loopCounter1 + 1;
          if (l_flt_TotalVolumePerContainer > 3000)
          {
            l_str_UnitsVolume = Translate("mL");
            l_flt_TotalVolumePerContainerML = l_flt_TotalVolumePerContainer / (1000 * 1.0);
            ReformatStringFloatDecimalPoints(l_flt_TotalVolumePerContainerML, l_str_TotalVolumePerContainer);
          }
          else
          {
            l_str_TotalVolumePerContainer = l_flt_TotalVolumePerContainer;
            l_str_UnitsVolume = Translate("µL");
          }
          l_str_Description1 = StrConcat12(l_str_Description, l_str_TotalVolumePerContainer, Translate("  "), l_str_UnitsVolume, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          l_arr_DescriptionForDialog.AddAsLast(l_str_Description1);
          l_arr_VolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
        }
      }
    }
    Util2::Debug::TraceArray(Translate("-------------- l_arr_VolumePerContainer: "), l_arr_VolumePerContainer);
    Util2::Debug::TraceArray(Translate("-------------- l_arr_DescriptionForDialog: "), l_arr_DescriptionForDialog);
    o_int_NumberOfContainersNeeded = l_int_NumberOfContainersNeeded;
    o_arr_VolumesPerContainer=l_arr_VolumePerContainer;
    o_arr_DescriptionForDialog=l_arr_DescriptionForDialog;
    return;
  }
} // library namespace
