 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "ASWStandardDialogs\\AswStatusDialog.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "ASWStandardDialogs\\ASWStandardDialogs.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "HSLAppsLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "HSLStatusWindow.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\MethodSpecificLibraries\\Tokenizer\\StrTokenize.hs_" }
 namespace _Method { #include "HSLLabwareStateLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\MethodSpecificLibraries\\SequenceTools_V3\\SequenceInArrayTools.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\NGSStarReadConfigFile_v3.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\MethodSpecificLibraries\\HSLCountdownLibrary\\HSLCountdownLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Library\\MethodSpecificLibraries\\ReformatString.hs_" }
 namespace _Method { #include "ASWStandardDialogs\\ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Methods\\NEBNext_EMseq_v1.2_deck.res"
variable _strEmailAdress;
variable _strDeviceAddress;
variable _blnODTCused;
variable _blnSendEmails;
variable _intTransportTool;
sequence MlStarSequenceNotUsed;
variable _intSelectedIndexSTOP;
variable _intSelectedIndexSTART;
dialog customDialog_1;
variable _strFileInputWorklist;
variable _intRequiredNumberOf300uLTipsM3;
variable _intRequiredNumberOf300uLTipsMPHM3;
variable _intRequiredNumberOf1000uLTipsM3;
variable _intRequiredNumberOf50uLTipsM3;
variable _intRequiredNumberOf300uLTipsMPHM1;
variable _intRequiredNumberOf300uLTipsMPHM2;
variable _intRequiredNumberOf1000uLTipsM1;
variable _intRequiredNumberOf1000uLTipsM2;
variable _intRequiredNumberOf50uLTipsM1;
variable _intRequiredNumberOf50uLTipsM2;
variable _intRequiredNumberOf300uLTipsM1;
variable _intRequiredNumberOf300uLTipsM2;
variable _intNumSamplesFromFile;
variable _intDeviceNumberODTC;
dialog customDialog_2;
variable _blnSimulationMode;
variable _strLocalIPAddressOfComputer;
variable _arrayALPPositions[];
variable _arrayIndex2Positions[];
variable _blnReturnEmailSuccess;
variable _intNumberOfIndexes;
variable _strSerialNumberMLStar;
variable _HHS1_HSP1;
variable _HHS2_HSP2;
variable _HHS3_HSP3_MIDI3;
variable _HHS4_MIDI1;
variable _HHS5_MIDI2;
variable _strProcess10;
variable _strProcess01;
variable _strProcess02;
variable _strProcess03;
variable _strProcess04;
variable _strProcess05;
variable _strProcess06;
variable _strProcess07;
variable _strProcess08;
variable _strProcess09;
variable _strKitName;
variable _strKitProvider;
variable _intRequiredNumberOf1000uLTipsM8;
variable _intRequiredNumberOf50uLTipsM5;
variable _intRequiredNumberOf1000uLTipsM9;
variable _intRequiredNumberOf50uLTipsM6;
variable _intRequiredNumberOf300uLTipsM4;
variable _intRequiredNumberOf50uLTipsM7;
variable _intRequiredNumberOf300uLTipsM5;
variable _intRequiredNumberOf50uLTipsM10;
variable _intRequiredNumberOf300uLTipsM10;
variable _intRequiredNumberOf50uLTipsM8;
variable _intRequiredNumberOf300uLTipsM6;
variable _intRequiredNumberOf50uLTipsM9;
variable _intRequiredNumberOf300uLTipsM7;
variable _intRequiredNumberOf300uLTipsM8;
variable _intRequiredNumberOf300uLTipsM9;
variable _intRequiredNumberOf300uLTipsMPHM4;
variable _intRequiredNumberOf300uLTipsMPHM5;
variable _intRequiredNumberOf300uLTipsMPHM6;
variable _intRequiredNumberOf300uLTipsMPHM7;
variable _intRequiredNumberOf300uLTipsMPHM8;
variable _intRequiredNumberOf300uLTipsMPHM9;
variable _intRequiredNumberOf1000uLTipsM4;
variable _intRequiredNumberOf1000uLTipsM5;
variable _intRequiredNumberOf300uLTipsMPHM10;
variable _intRequiredNumberOf1000uLTipsM6;
variable _intRequiredNumberOf1000uLTipsM10;
variable _intRequiredNumberOf1000uLTipsM7;
variable _intRequiredNumberOf50uLTipsM4;
variable _arraySampleSourcePlateLabID[];
variable _arrayIndex1Positions[];
variable _arrBlnProcessActivation[];
variable _strKitProviderKitName;
variable _arrProcessesCleanUp[];
variable _arrPositions[];
variable _arrDescriptions[];
variable _arrQuantities[];
variable _inTotalProcessToPerform;
variable _arrProcessUsingMastermix[];
variable _arrProcessUsingODTC[];
variable _arrProcessesToPerform[];
variable _fltVolume_CleanUp2_Eluate;
variable _fltVolume_CleanUp1_Sample;
variable _fltVolume_CleanUp1_Beads;
variable _fltVolume_CleanUp4_Sample;
variable _fltVolume_CleanUp2_Beads;
variable _fltVolume_CleanUp3_Beads;
variable _fltVolume_CleanUp4_Beads;
variable _fltVolume_AdapterLigation_EMseqAdapter;
variable _fltVolume_Deamination_Water;
variable _fltVolume_CleanUp3_ElutionBuffer;
variable _fltVolume_CleanUp1_ElutionBuffer;
variable _fltVolume_Oxidation_StopReagent;
variable _fltVolume_CleanUp3_Eluate;
variable _fltVolume_CleanUp2_Sample;
variable _fltVolume_CleanUp1_Eluate;
variable _fltVolume_PCRAmplification_Q5UMastermix;
variable _fltVolume_CleanUp3_Sample;
variable _fltVolume_AdapterLigation_Mix;
variable _fltVolume_Denaturation_NaOH;
variable _fltVolume_CleanUp4_ElutionBuffer;
variable _fltVolume_CleanUp4_Eluate;
variable _fltVolume_CleanUp2_ElutionBuffer;
variable _fltVolume_PCRAmplification_Index;
variable _fltVolume_EndPrep_MasterMix;
variable _intTotalActivationsOfCPAC;
sequence _seqAspirate_EndPrep_Mastermix;
sequence _seqDispense_Deamination_Water;
sequence _seqDispense_AdapterLigation_Mix;
sequence _seqAspirate_PCRAmplification_Q5UMastermix;
sequence _seqAspirate_CleanUp4_EtOH;
sequence _seqAspirate_CleanUp4_ElutionBuffer;
sequence _seqAspirate_CleanUp2_ElutionBuffer;
sequence _seqDispense_CleanUp4_ElutionBuffer;
sequence _seqDispense_CleanUp2_ElutionBuffer;
sequence _seqAspirate_CleanUp3_EtOH;
sequence _seqAspirate_CleanUp2_EtOH;
sequence _seqAspirate_CleanUp1_EtOH;
sequence _seqAspirate_Deamination_Water;
sequence _seqAspirate_CleanUp1_Beads;
sequence _seqDispense_Denaturation_NaOH;
sequence _seqDispense_CleanUp4_EtOH;
sequence _seqAspirate_CleanUp2_Beads;
sequence _seqDispense_EndPrep_Mastermix;
sequence _seqDispense_CleanUp3_EtOH;
sequence _seqAspirate_CleanUp4_Beads;
sequence _seqAspirate_CleanUp3_Beads;
sequence _seqDispense_CleanUp2_EtOH;
sequence _seqDispense_CleanUp1_EtOH;
sequence _seqDispense_CleanUp3_ElutionBuffer;
sequence _seqDispense_CleanUp1_Beads;
sequence _seqAspirate_CleanUp3_ElutionBuffer;
sequence _seqAspirate_CleanUp1_ElutionBuffer;
sequence _seqDispense_PCRAmplification_Q5UMastermix;
sequence _seqDispense_CleanUp2_Beads;
sequence _seqDispense_CleanUp1_ElutionBuffer;
sequence _seqDispense_CleanUp4_Beads;
sequence _seqDispense_CleanUp3_Beads;
sequence _seqAspirate_Denaturation_NaOH;
sequence _seqAspirate_AdapterLigation_Mix;
sequence _seqAspirate_AdapterLigation_EMseqAdapter;
sequence _seqAspirate_Oxidation_StopReagent;
variable _arrStrProcessIDs[];
variable _arrayIndex1IDs[];
variable _strIndexFormat;
variable _arrayIndex2IDs[];
variable _strConfigFileFullPath;
sequence _arrSeqToAspirate[];
variable _arrStrReagentNames[];
variable _arrFltVolumeReagentPerSample[];
variable _fltVolume_CleanUp2_Ethanol;
variable _fltVolume_CleanUp1_Ethanol;
variable _fltVolume_CleanUp4_Ethanol;
variable _fltVolume_CleanUp3_Ethanol;
sequence _seqDispense_AdapterLigation_EMseqAdapter;
sequence _seqDispense_Oxidation_StopReagent;
sequence _seqAspirate_CleanUp2_Samples;
sequence _seqAspirate_CleanUp1_Samples;
sequence _seqAspirate_CleanUp4_Samples;
sequence _seqAspirate_CleanUp3_Samples;
sequence _seqAspirate_CleanUp2_Eluate;
sequence _seqDispense_CleanUp3_Eluate;
sequence _seqAspirate_CleanUp3_Eluate;
sequence _seqDispense_CleanUp1_Eluate;
sequence _seqDispense_CleanUp4_Eluate;
sequence _seqAspirate_CleanUp1_Eluate;
sequence _seqAspirate_CleanUp4_Eluate;
sequence _seqDispense_CleanUp2_Eluate;
sequence _seqMagnet_CleanUp2_stand;
sequence _seqMagnet_CleanUp1_stand;
sequence _seqMagnet_CleanUp3_stand;
sequence _seqMagnet_CleanUp4_stand;
sequence _seqLiquidWaste;
sequence _seqDispense_CleanUp4_Samples;
sequence _seqDispense_CleanUp3_Samples;
sequence _seqDispense_CleanUp2_Samples;
sequence _seqDispense_CleanUp1_Samples;
sequence _seqDispense_PCRAmplification_Indexes1;
sequence _seqDispense_PCRAmplification_Indexes2;
sequence _seqAspirate_PCRAmplification_Indexes1;
sequence _seqAspirate_PCRAmplification_Indexes2;
sequence _seqStackMIDIPlates;
sequence _seqStackHSPPlates;
variable _fltVolume_EndPrep_Mixing;
variable _fltVolume_AdapterLigation_Mixing;
variable _fltVolume_SampleInput;
variable _fltVolume_Oxidation_MasterMix;
variable _fltVolume_Oxidation_Mixing;
sequence _seqAspirate_Oxidation_MasterMix;
sequence _seqDispense_Oxidation_MasterMix;
variable _fltVolume_Denaturation_Mixing;
variable _fltVolume_Deamination_MasterMix;
sequence _seqDispense_Deamination_MasterMix;
sequence _seqAspirate_Deamination_MasterMix;
variable _fltVolume_Deamination_Mixing;
variable _fltVolume_PCRAmplification_Mixing;
variable _fltVolume_CleanUp3_SupernatantToWaste;
variable _fltVolume_CleanUp2_SupernatantToWaste;
variable _fltVolume_CleanUp4_SupernatantToWaste;
variable _fltVolume_CleanUp1_SupernatantToWaste;
sequence _arrSeqStackMIDI[];
sequence _arrSeqStackHSP[];
sequence _arrSeqStackComfortLid[];
variable _intIndexMIDIFromStack;
variable _intIndexHSPFromStack;
variable _intIndexComfortLidFromStack;
variable intRequestIDForActiveProtocol;
variable _strODTCProtocolName;
variable intTimeForProtocol;
variable _blnODTCShortenPreHeatingMethods;
variable _blnDisableLoadingCarrierCommands;
variable _blnDisablePipettingCommands;
variable _strODTCScriptPath;
variable _blnDisableODTCIncubationCommands;
variable _intSelecedSizeSelectionIndex;
variable _intPCRCycles;
variable _strStatusDialogTitle_KitName;
variable _blnIsODTCInstalled;
variable _blnODTCTerminatedPrematurely;
variable _intODTC_RequiredLidTemperature;
variable _intODTC_RequiredBlockTemperature;
variable _blnTestODTCWithShortIncubationProtocol;
variable _blnUpdateInformationIntoReportFile;
variable _fltVolume_CleanUp3_Sample_OverAspiration;
variable _fltVolume_CleanUp1_Sample_OverAspiration;
variable _fltVolume_CleanUp4_Sample_OverAspiration;
variable _fltVolume_CleanUp2_Sample_OverAspiration;
global device ML_STAR ("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Methods\\NEBNext_EMseq_v1.2_deck.lay", "ML_STAR", hslTrue);
variable _fltVolume_PCRAmplification_Water;
sequence _seqAspirate_PCRAmplification_Water;
sequence _seqDispense_PCRAmplification_Water;
variable fileNGSConfig_Labware_Type;
variable fileNGSConfig_PositionID;
variable fileNGSConfig_Reagent;
variable fileNGSConfig_ProcessID;
variable strLiquidToModify;
variable strSQLSentence;
variable fileNGSConfig_Liquid_Class_Name;
variable fileNGSConfig_ProcessNumber;
variable fileNGSConfig_Dead_Volume_Labware;
variable fileNGSConfig_Maximum_Volume_Labware;
variable fileNGSConfig_Carrier;
variable fileNGSConfig_Name;
variable fileNGSConfig_Volume_per_Sample;
variable fileNGSConfig_Dead_Volume_Reagent;
file fileNGSConfig;
variable fileNGSConfig_Process;
variable t_fileNGSConfig_Volume_NucleaseFreeWaterVariable;
variable fileNGSConfig_Extra_Tips_300;
variable fileNGSConfig_ComfortLids;
variable fileNGSConfig_MIDI;
variable fileNGSConfig_Extra_Tips_50;
variable fileNGSConfig_Tips50;
variable fileNGSConfig_Tips1000;
variable fileNGSConfig_HSP;
variable fileNGSConfig_Extra_Tips_1000;
variable fileNGSConfig_Tips300;
variable _arrIntNumberOfTipsPerProcess[];
sequence _seqAspirate_Oxidation_Fe;
variable _fltVolume_Oxidation_Fe;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable retValueDialog;
    private variable intISWAP(1); // Choose Transport tool iswap with a value of 1
    private variable intCOREGripper(2); // Choose transport tool CORE Gripper to perform transport steps with CORE gripper instead of iswap. Value = 2
    private variable intResultTipCheck;
    private variable ReturnEmailSuccess;
    private variable strChPatternAbort;
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIP_PRESENT_CHECK_5ML_1ML::_InitLibrary();
    NGSSTARPREP::_InitLibrary();
    NGSSTARPROCESSES::_InitLibrary();
    STRTOKENIZE::_InitLibrary();
    SEQUENCEINARRAYTOOLS::_InitLibrary();
    NGSSTARREADCONFIGFILE_V3::_InitLibrary();
    REFORMATSTRING::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNext_EMseq\nBy:          Enrique Bayo (ebayo@hamilton.ch)\nDate:      November 22, 2018\nVersion:  2.0\n\nBased on  Draft: Version 1.8 NGS Framework\n\nVersion Notes:\n\n1. review _VersionHistory Tab\n\n*************************************************************************************************************************************"));
    _blnIsODTCInstalled = ASWGLOBAL::BOOL::TRUE;
    _blnTestODTCWithShortIncubationProtocol = ASWGLOBAL::BOOL::FALSE;
    _blnDisableODTCIncubationCommands = ASWGLOBAL::BOOL::FALSE;
    _blnDisablePipettingCommands = ASWGLOBAL::BOOL::FALSE;
    _blnDisableLoadingCarrierCommands = ASWGLOBAL::BOOL::FALSE;
    _blnUpdateInformationIntoReportFile = ASWGLOBAL::BOOL::FALSE;
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    _blnSimulationMode = Util::GetSimulationMode();
    _strSerialNumberMLStar = GetSerialNumber(ML_STAR);
    NGSSTARPREP::HandOverSimulationModeForAllLocalSMTs(_blnSimulationMode);
    if(0){
      _intTransportTool = intISWAP;
    }
    _intTransportTool = intCOREGripper;
    SeqRemoveAll(MlStarSequenceNotUsed);
    NGSSTARPROCESSES::DATA_HandoverSequencesAndDataToSMT(ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilterMPH, MlStarSequenceNotUsed, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR.COREGripTool_OnWaste_1000ul_0001, _intTransportTool, _blnSimulationMode, Translate("NEBNext EM-seq"), _blnDisablePipettingCommands);
    _blnSendEmails = ASWGLOBAL::BOOL::TRUE;
    _strEmailAdress = Translate("robotUsers@embl.de");
    _strKitProvider = Translate("NEB");
    _strKitName = Translate("NEBNext_EMseq");
    _strStatusDialogTitle_KitName = Translate("NEBNext EM-seq");
    _strKitProviderKitName = StrConcat4(_strKitProvider, Translate(" - "), _strKitName, Translate(""));
    _strConfigFileFullPath = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext_EMseq\\Files\\ConfigurationFile\\NEBNext_EMseq_Config.xls");
    strSQLSentence = StrConcat12("Select * FROM [Reagents$] WHERE [ProcessNumber] = 10 AND [Name] = 'Nuclease free Water'", "","","","","","","","","","","");
    TrcTrace(Translate("strSQLSentence: "), strSQLSentence);
    fileNGSConfig.AddField("ProcessNumber", fileNGSConfig_ProcessNumber, hslInteger);
    fileNGSConfig.AddField("ProcessID", fileNGSConfig_ProcessID, hslString, 255);
    fileNGSConfig.AddField("Reagent", fileNGSConfig_Reagent, hslString, 255);
    fileNGSConfig.AddField("Name", fileNGSConfig_Name, hslString, 255);
    fileNGSConfig.AddField("Labware Type", fileNGSConfig_Labware_Type, hslString, 255);
    fileNGSConfig.AddField("Carrier", fileNGSConfig_Carrier, hslString, 255);
    fileNGSConfig.AddField("PositionID", fileNGSConfig_PositionID, hslString, 255);
    fileNGSConfig.AddField("Volume per Sample", fileNGSConfig_Volume_per_Sample, hslFloat);
    fileNGSConfig.AddField("Dead Volume Reagent", fileNGSConfig_Dead_Volume_Reagent, hslFloat);
    fileNGSConfig.AddField("Dead Volume Labware", fileNGSConfig_Dead_Volume_Labware, hslFloat);
    fileNGSConfig.AddField("Maximum Volume Labware", fileNGSConfig_Maximum_Volume_Labware, hslFloat);
    fileNGSConfig.AddField("Liquid Class Name", fileNGSConfig_Liquid_Class_Name, hslString, 255);
    if( 0 == fileNGSConfig.Open(_strConfigFileFullPath + " " + "Reagents$", hslRead, strSQLSentence) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strConfigFileFullPath, "HxMetEdCompCmd");
    }
    if( 0 == fileNGSConfig.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    t_fileNGSConfig_Volume_NucleaseFreeWaterVariable = fileNGSConfig_Volume_per_Sample;
    strSQLSentence = StrConcat12("UPDATE [Resources$] SET [Tips50] = 3 , [Tips300] = 5 WHERE [Process] = 10","","","","","","","","","","","");
    TrcTrace(Translate("strSQLSentence: "), strSQLSentence);
    fileNGSConfig.AddField("Process", fileNGSConfig_Process, hslFloat);
    fileNGSConfig.AddField("Tips50", fileNGSConfig_Tips50, hslFloat);
    fileNGSConfig.AddField("Tips300", fileNGSConfig_Tips300, hslFloat);
    fileNGSConfig.AddField("Tips1000", fileNGSConfig_Tips1000, hslFloat);
    fileNGSConfig.AddField("Extra Tips 50", fileNGSConfig_Extra_Tips_50, hslFloat);
    fileNGSConfig.AddField("Extra Tips 300", fileNGSConfig_Extra_Tips_300, hslFloat);
    fileNGSConfig.AddField("Extra Tips 1000", fileNGSConfig_Extra_Tips_1000, hslFloat);
    fileNGSConfig.AddField("ComfortLids", fileNGSConfig_ComfortLids, hslFloat);
    fileNGSConfig.AddField("HSP", fileNGSConfig_HSP, hslFloat);
    fileNGSConfig.AddField("MIDI", fileNGSConfig_MIDI, hslFloat);
    if( 0 == fileNGSConfig.Open(_strConfigFileFullPath + " " + "Resources$", hslRead, strSQLSentence) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strConfigFileFullPath, "HxMetEdCompCmd");
    }
    if( 0 != fileNGSConfig.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileNGSConfig.RemoveFields();
    _SelectProcesses();
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    AswStandardDialogs::Initialize();
    AswStatusDialog::Initialize(_strStatusDialogTitle_KitName);
    AswStatusDialog::SetStatusText(Translate("Run Preparation..."));
    AswStatusDialog::AppendText(Translate("   Initializing Liquid Waste Sensor..."));
    if(0){
      NGSSTARPREP::LiquidWasteSensor_Init(3);
    }
    AswStatusDialog::SetStatusText(Translate("   Initializing CPAC chiller..."));
    NGSSTARPREP::CPAC_Init();
    NGSSTARPREP::CPAC_SetTemperature(6);
    AswStatusDialog::AppendText(Translate("   Initializing Hamilton Heater Shakers (HHSs)..."));
    NGSSTARPREP::HHS_Init(_HHS1_HSP1, _HHS2_HSP2, _HHS3_HSP3_MIDI3, _HHS4_MIDI1, _HHS5_MIDI2);
    NGSSTARPREP::HHS_SetTemperature(_HHS1_HSP1, 0.0);
    NGSSTARPREP::HHS_SetTemperature(_HHS2_HSP2, 0);
    NGSSTARPREP::HHS_SetTemperature(_HHS3_HSP3_MIDI3, 0.0);
    NGSSTARPREP::HHS_SetTemperature(_HHS4_MIDI1, 0);
    NGSSTARPREP::HHS_SetTemperature(_HHS5_MIDI2, 0);
    if (_blnIsODTCInstalled == ASWGLOBAL::BOOL::TRUE)
    {
      if (_blnODTCused == ASWGLOBAL::BOOL::TRUE)
      {
        TrcTrace(Translate(" >>>>>>>>>>>> ODTC is installed and used..."), Translate(""));
        AswStatusDialog::AppendText(Translate("   Initializing ODTC..."));
        if(0){
          _strDeviceAddress = "192.168.1.10";
          _strLocalIPAddressOfComputer = "192.168.1.1";
        }
        _strLocalIPAddressOfComputer = "192.168.1.1";
        _strDeviceAddress = "192.168.1.10";
        NGSSTARPREP::ODTC_Init(_strDeviceAddress, _intDeviceNumberODTC, _strLocalIPAddressOfComputer);
        if (_blnTestODTCWithShortIncubationProtocol == ASWGLOBAL::BOOL::TRUE)
        {
          MECC::TraceComment(Translate(">>>>>>>>>>> SHORT INCUBATIONS FOR ODTC ARE ACTIVATED"));
          _blnODTCShortenPreHeatingMethods = ASWGLOBAL::BOOL::TRUE;
          _strODTCScriptPath = StrConcat12(Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\"), _strKitProvider, Translate("\\"), _strKitName, Translate("\\Files\\ODTC_scripts\\"), Translate("NEBNext_EMseq_ShortIncubationsForTestOnly.xml"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        else
        {
          _strODTCScriptPath = StrConcat12(Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\"), _strKitProvider, Translate("\\"), _strKitName, Translate("\\Files\\ODTC_scripts\\"), Translate("NEBNext_EMseq_Incubations.xml"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        if (_intSelectedIndexSTART == 1)
        {
          _strODTCProtocolName = Translate("Init20");
          _intODTC_RequiredBlockTemperature = 20;
          _intODTC_RequiredLidTemperature = 30;
        }
        if (_intSelectedIndexSTART == 2)
        {
          _strODTCProtocolName = Translate("Init10");
          _intODTC_RequiredBlockTemperature = 10;
          _intODTC_RequiredLidTemperature = 30;
        }
        if (_intSelectedIndexSTART >= 4)
        {
          if (_intSelectedIndexSTART <= 7)
          {
            _strODTCProtocolName = Translate("Init37");
            _intODTC_RequiredBlockTemperature = 37;
            _intODTC_RequiredLidTemperature = 70;
          }
        }
        if (_intSelectedIndexSTART >= 8)
        {
          if (_intSelectedIndexSTART < 10)
          {
            _strODTCProtocolName = Translate("Init60");
            _intODTC_RequiredBlockTemperature = 60;
            _intODTC_RequiredLidTemperature = 70;
          }
        }
        MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Init Method --> Pre Heat ODTC Lid and Block- Start\n"));
        TrcTrace(Translate(">>>>>>>> ODTC Script Patht Init (_strODTCScriptPath) : "), _strODTCScriptPath);
        TrcTrace(Translate(">>>>>>>> ODTCProtocolName Init  (_strODTCProtocolName) : "), _strODTCProtocolName);
        if (_blnSimulationMode == ASWGLOBAL::BOOL::FALSE)
        {
          if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
          {
            NGSSTARPREP::ODTC_DownloadProtocol(_intDeviceNumberODTC, _strODTCScriptPath);
            NGSSTARPREP::ODTC_CloseDoor(_intDeviceNumberODTC);
            NGSSTARPREP::ODTC_ExecuteProtocol(_intDeviceNumberODTC, _strODTCScriptPath, _strODTCProtocolName, intTimeForProtocol, intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::TRUE);
          }
        }
        MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Pre Heat ODTC Lid - Completed\n"));
        _blnODTCTerminatedPrematurely = ASWGLOBAL::BOOL::FALSE;
      }
      else
      {
        TrcTrace(Translate(" >>>>>>>>>>>> ODTC is installed but not used..."), Translate(""));
        _strDeviceAddress = "No ODTC used";
      }
    }
    else
    {
      TrcTrace(Translate(" >>>>>>>>>>>> ODTC is not installed..."), Translate(""));
    }
    {
      while (1 == 1)
      {
        NGSSTARPREP::DATA_ReadInputWorklistExcelFormat(_strFileInputWorklist, ML_STAR.HSP_Pipette, _intNumSamplesFromFile, _intNumberOfIndexes, _arrayIndex1Positions, _arrayIndex1IDs, _arrayIndex2Positions, _arrayIndex2IDs, _arraySampleSourcePlateLabID, _arrayALPPositions, _strIndexFormat);
        Util2::Debug::TraceArray_2(Translate("Arrays for Index 1"), _arrayIndex1IDs, _arrayIndex1Positions);
        Util2::Debug::TraceArray_2(Translate("Arrays for Index 2"), _arrayIndex2IDs, _arrayIndex2Positions);
        if (_arrBlnProcessActivation.ElementAt( 9 -1) == ASWGLOBAL::BOOL::FALSE)
        {
          _strIndexFormat = Translate("No indexes required");
        }
        TrcTrace(Translate("_strIndexFormat: "), _strIndexFormat);
        TrcTrace(Translate("_intNumSamplesFromFile: "), _intNumSamplesFromFile);
        TrcTrace(Translate("_intNumberOfIndexes: "), _intNumberOfIndexes);
        if (_intNumSamplesFromFile > 96)
        {
          customDialog_2.InitCustomDialog("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");
          customDialog_2.ShowCustomDialog();
          retValueDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
          if (retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
          }
        }
        else
        {
          break;
        }
      }
    }
    AswStatusDialog::AppendText(Translate("   Resources required..."));
    _CalculateAndLoadConsumables();
    _SequenceDefinition();
    _VolumeDefinition();
    if (_blnIsODTCInstalled == ASWGLOBAL::BOOL::TRUE)
    {
      if (_blnODTCused == ASWGLOBAL::BOOL::TRUE)
      {
        if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(_intDeviceNumberODTC, intTimeForProtocol, intRequestIDForActiveProtocol);
        }
      }
    }
    if (_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process01_EndPrep();
    }
    if (_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process02_AdapterLigation();
    }
    if (_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process03_CleanUp_1();
    }
    if (_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process04_5mC5hmC_Oxidation();
    }
    if (_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process05_CleanUp_2();
    }
    if (_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process06_Denaturation();
    }
    if (_arrBlnProcessActivation.ElementAt( 7 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process07_Deamination();
    }
    if (_arrBlnProcessActivation.ElementAt( 8 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process08_CleanUp_3();
    }
    if (_arrBlnProcessActivation.ElementAt( 9 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process09_PCR_Amplification();
    }
    if (_arrBlnProcessActivation.ElementAt( 10 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process10_CleanUp_4();
    }
    if (_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
    if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
    {
      AswStatusDialog::SetStatusText(Translate("Unloading the deck..."));
      MECC::TraceComment(Translate("***** Unload Carriers *****"));
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    AswStatusDialog::AppendText(Translate("จจจจจจจจจจจจจจจจMETHOD COMPLETEDจจจจจจจจจจจจจจจจ"));
    AswStatusDialog::SetStatusText(Translate("Preparing for run shutdown..."));
    strSQLSentence = StrConcat12("UPDATE [Reagents$] SET [Volume per Sample] = ", t_fileNGSConfig_Volume_NucleaseFreeWaterVariable," WHERE [ProcessNumber] = 10 AND [Name] = 'Nuclease free Water'","","","","","","","","","");
    TrcTrace(Translate("strSQLSentence: "), strSQLSentence);
    fileNGSConfig.AddField("ProcessNumber", fileNGSConfig_ProcessNumber, hslInteger);
    fileNGSConfig.AddField("ProcessID", fileNGSConfig_ProcessID, hslString, 255);
    fileNGSConfig.AddField("Reagent", fileNGSConfig_Reagent, hslString, 255);
    fileNGSConfig.AddField("Name", fileNGSConfig_Name, hslString, 255);
    fileNGSConfig.AddField("Labware Type", fileNGSConfig_Labware_Type, hslString, 255);
    fileNGSConfig.AddField("Carrier", fileNGSConfig_Carrier, hslString, 255);
    fileNGSConfig.AddField("PositionID", fileNGSConfig_PositionID, hslString, 255);
    fileNGSConfig.AddField("Volume per Sample", fileNGSConfig_Volume_per_Sample, hslFloat);
    fileNGSConfig.AddField("Dead Volume Reagent", fileNGSConfig_Dead_Volume_Reagent, hslFloat);
    fileNGSConfig.AddField("Dead Volume Labware", fileNGSConfig_Dead_Volume_Labware, hslFloat);
    fileNGSConfig.AddField("Maximum Volume Labware", fileNGSConfig_Maximum_Volume_Labware, hslFloat);
    fileNGSConfig.AddField("Liquid Class Name", fileNGSConfig_Liquid_Class_Name, hslString, 255);
    if( 0 == fileNGSConfig.Open(_strConfigFileFullPath + " " + "Reagents$", hslRead, strSQLSentence) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strConfigFileFullPath, "HxMetEdCompCmd");
    }
    if( 0 != fileNGSConfig.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileNGSConfig.RemoveFields();
    strSQLSentence = StrConcat12("UPDATE [Resources$] SET [Tips50] = 3 , [Tips300] = 5 WHERE [Process] = 10","","","","","","","","","","","");
    TrcTrace(Translate("strSQLSentence: "), strSQLSentence);
    fileNGSConfig.AddField("Process", fileNGSConfig_Process, hslFloat);
    fileNGSConfig.AddField("Tips50", fileNGSConfig_Tips50, hslFloat);
    fileNGSConfig.AddField("Tips300", fileNGSConfig_Tips300, hslFloat);
    fileNGSConfig.AddField("Tips1000", fileNGSConfig_Tips1000, hslFloat);
    fileNGSConfig.AddField("Extra Tips 50", fileNGSConfig_Extra_Tips_50, hslFloat);
    fileNGSConfig.AddField("Extra Tips 300", fileNGSConfig_Extra_Tips_300, hslFloat);
    fileNGSConfig.AddField("Extra Tips 1000", fileNGSConfig_Extra_Tips_1000, hslFloat);
    fileNGSConfig.AddField("ComfortLids", fileNGSConfig_ComfortLids, hslFloat);
    fileNGSConfig.AddField("HSP", fileNGSConfig_HSP, hslFloat);
    fileNGSConfig.AddField("MIDI", fileNGSConfig_MIDI, hslFloat);
    if( 0 == fileNGSConfig.Open(_strConfigFileFullPath + " " + "Resources$", hslRead, strSQLSentence) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strConfigFileFullPath, "HxMetEdCompCmd");
    }
    if( 0 != fileNGSConfig.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileNGSConfig.RemoveFields();
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 0, 5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
    AswStandardDialogs::Terminate();
    NGSSTARPREP::HHS_Terminate(_HHS1_HSP1, _HHS2_HSP2, _HHS3_HSP3_MIDI3, _HHS4_MIDI1, _HHS5_MIDI2);
    NGSSTARPREP::CPAC_Terminate();
    if (_blnIsODTCInstalled == ASWGLOBAL::BOOL::TRUE)
    {
      if (_blnODTCused == ASWGLOBAL::BOOL::TRUE)
      {
        if (_blnODTCTerminatedPrematurely == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPREP::ODTC_CloseDoor(_intDeviceNumberODTC);
          NGSSTARPREP::ODTC_Terminate(_intDeviceNumberODTC);
        }
      }
    }
    intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, strChPatternAbort, 8);
    if (intResultTipCheck == 1)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    retValueDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    AswStatusDialog::Terminate();
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    if (_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      _blnReturnEmailSuccess = Util::SendEMail(_strEmailAdress, Translate("Method completed"), Translate(""));
    }
    Trace ("***** ReturnEmailSuccess:  ", ReturnEmailSuccess);
    TIP_PRESENT_CHECK_5ML_1ML::_ExitLibrary();
    NGSSTARPREP::_ExitLibrary();
    NGSSTARPROCESSES::_ExitLibrary();
    STRTOKENIZE::_ExitLibrary();
    SEQUENCEINARRAYTOOLS::_ExitLibrary();
    NGSSTARREADCONFIGFILE_V3::_ExitLibrary();
    REFORMATSTRING::_ExitLibrary();
  } }
