private function Process01_EndPrep(  ) void ;
private function Process02_AdapterLigation(  ) void ;
private function Process03_CleanUp_1(  ) void ;
private function Process04_5mC5hmC_Oxidation(  ) void ;
private function Process05_CleanUp_2(  ) void ;
private function Process06_Denaturation(  ) void ;
private function Process07_Deamination(  ) void ;
private function Process08_CleanUp_3(  ) void ;
private function Process09_PCR_Amplification(  ) void ;
private function Process10_CleanUp_4(  ) void ;
private function _CalculateAndLoadConsumables(  ) void ;
private function _Loading( variable & i_arrColumnHeaders[], variable i_strTopText, variable i_strBottomText, variable i_strTopImageFilePath, variable i_intImageSize, variable & io_arrPositions[], variable & io_arrQuantities[], variable & io_arrDescriptions[] ) void ;
private function _LoadingDialogAddRowWithData( variable i_strValue1, variable i_strValue2, variable i_strValue3 ) void ;
private function _SelectProcesses(  ) void ;
private function _SequenceDefinition(  ) void ;
private function _VersionHistory(  ) void ;
private function _VolumeDefinition(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private variable intResultTipCheck;
  private variable strChPatternAbort;
  private dialog dialogHandle1;
  AswStatusDialog::AppendText(Translate("จจจจจจจจจจจจจจจจMETHOD ABORTEDจจจจจจจจจจจจจจจจ"));
  strSQLSentence = StrConcat12("UPDATE [Reagents$] SET [Volume per Sample] = ", t_fileNGSConfig_Volume_NucleaseFreeWaterVariable," WHERE [ProcessNumber] = 10 AND [Name] = 'Nuclease free Water'","","","","","","","","","");
  TrcTrace(Translate("strSQLSentence: "), strSQLSentence);
  fileNGSConfig.AddField("ProcessNumber", fileNGSConfig_ProcessNumber, hslInteger);
  fileNGSConfig.AddField("ProcessID", fileNGSConfig_ProcessID, hslString, 255);
  fileNGSConfig.AddField("Reagent", fileNGSConfig_Reagent, hslString, 255);
  fileNGSConfig.AddField("Name", fileNGSConfig_Name, hslString, 255);
  fileNGSConfig.AddField("Labware Type", fileNGSConfig_Labware_Type, hslString, 255);
  fileNGSConfig.AddField("Carrier", fileNGSConfig_Carrier, hslString, 255);
  fileNGSConfig.AddField("PositionID", fileNGSConfig_PositionID, hslString, 255);
  fileNGSConfig.AddField("Volume per Sample", fileNGSConfig_Volume_per_Sample, hslFloat);
  fileNGSConfig.AddField("Dead Volume Reagent", fileNGSConfig_Dead_Volume_Reagent, hslFloat);
  fileNGSConfig.AddField("Dead Volume Labware", fileNGSConfig_Dead_Volume_Labware, hslFloat);
  fileNGSConfig.AddField("Maximum Volume Labware", fileNGSConfig_Maximum_Volume_Labware, hslFloat);
  fileNGSConfig.AddField("Liquid Class Name", fileNGSConfig_Liquid_Class_Name, hslString, 255);
  if( 0 == fileNGSConfig.Open(_strConfigFileFullPath + " " + "Reagents$", hslRead, strSQLSentence) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strConfigFileFullPath, "HxMetEdCompCmd");
  }
  if( 0 != fileNGSConfig.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  fileNGSConfig.RemoveFields();
  strSQLSentence = StrConcat12("UPDATE [Resources$] SET [Tips50] = 3 , [Tips300] = 5 WHERE [Process] = 10","","","","","","","","","","","");
  TrcTrace(Translate("strSQLSentence: "), strSQLSentence);
  fileNGSConfig.AddField("Process", fileNGSConfig_Process, hslFloat);
  fileNGSConfig.AddField("Tips50", fileNGSConfig_Tips50, hslFloat);
  fileNGSConfig.AddField("Tips300", fileNGSConfig_Tips300, hslFloat);
  fileNGSConfig.AddField("Tips1000", fileNGSConfig_Tips1000, hslFloat);
  fileNGSConfig.AddField("Extra Tips 50", fileNGSConfig_Extra_Tips_50, hslFloat);
  fileNGSConfig.AddField("Extra Tips 300", fileNGSConfig_Extra_Tips_300, hslFloat);
  fileNGSConfig.AddField("Extra Tips 1000", fileNGSConfig_Extra_Tips_1000, hslFloat);
  fileNGSConfig.AddField("ComfortLids", fileNGSConfig_ComfortLids, hslFloat);
  fileNGSConfig.AddField("HSP", fileNGSConfig_HSP, hslFloat);
  fileNGSConfig.AddField("MIDI", fileNGSConfig_MIDI, hslFloat);
  if( 0 == fileNGSConfig.Open(_strConfigFileFullPath + " " + "Resources$", hslRead, strSQLSentence) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strConfigFileFullPath, "HxMetEdCompCmd");
  }
  if( 0 != fileNGSConfig.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  fileNGSConfig.RemoveFields();
  if (_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
  {
    _blnReturnEmailSuccess = Util::SendEMail(_strEmailAdress, Translate("Method aborted"), Translate(""));
  }
  NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 0, 5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  AswStandardDialogs::Terminate();
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  NGSSTARPREP::HHS_Terminate(_HHS1_HSP1, _HHS2_HSP2, _HHS3_HSP3_MIDI3, _HHS4_MIDI1, _HHS5_MIDI2);
  NGSSTARPREP::CPAC_Terminate();
  if (_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_Init(_strDeviceAddress, _intDeviceNumberODTC, _strLocalIPAddressOfComputer);
    NGSSTARPREP::ODTC_OpenDoor(_intDeviceNumberODTC);
    dialogHandle1.SetOutput(Translate("Method has aborted. Please remove any plate left in the ODTC. Press OK to terminate the run"));
    dialogHandle1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    NGSSTARPREP::ODTC_CloseDoor(_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_Terminate(_intDeviceNumberODTC);
  }
  intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, strChPatternAbort, 8);
  if (intResultTipCheck == 1)
  {
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  AswStatusDialog::Terminate();
}

private function _VersionHistory(  ) void {
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNext_EMseq\nBy:          Stephan Grosch, Hamilton Bonaduz AG\nDate:     April 22, 2020\nVersion:  1.7\n\nBased on  Draft: Version FX1.8 NEBNext EM-seq\n\nVersion Notes:\n\n- new mastermix component for oxidation mater mix (DTT) introduced into configuration file.\n- changed volumes within process1 transfereluate reduced from 29 ul to 28 and eluting in 30ul instead of 31ul\n-prompting loading instruction to freshly prepare oxidation master mix - iron instability\n\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNext_EMseq\nBy:          Stephan Grosch, Hamilton Bonaduz AG\nDate:      January 13, 2020\nVersion:  1.6\n\nBased on  Draft: Version FX1.8 NEBNext EM-seq\n\nVersion Notes:\n\n- main method sets z- force for ejectiong tips from 10 to 20 for all channels.\n- changed cleanup process discarding liquid using fix height instead off touch off to avoid tilting the plate at column 1 and 12\n- changed PIP_Liquid_SingleDispenseFromPlateToPlate  final transfer after cleanups from touch off to fix height using the swtich to : ASWGLOBAL::BOOL::FALSE\n- changed PIP_Liquid_SingleDispenseFromPlateToPlate  previous transfer before cleanups from touch off to fix height using the swtich to : ASWGLOBAL::BOOL::FALSE\n- changed PIP_Liquid_SingleDispenseFromPlateToPlate  at  Process09_PCR_Amplification  from touch off to fix height using the swtich to : ASWGLOBAL::BOOL::FALSE\n\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNext_EMseq\nBy:          Stephan Grosch, Hamilton Bonaduz AG\nDate:      December 12, 2019\nVersion:  1.5\n\nBased on  Draft: Version FX1.8 NEBNext EM-seq\n\nVersion Notes:\n- reset config file values on abort affecting process 10 only.\n- added addition of water during size selection to shift the peaks to the right - approved by NEB development team (5ตl ) - if you run 500bp selection there will be added 90 ตl in addition to that\n\n\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNext_EMseq\nBy:          Enrique Bayo, Hamilton Iberia\nDate:      February 13, 2018\nVersion:  1\n\nBased on  Draft: Version 1.8 NEBNext EM-seq\n\nVersion Notes:\n\n0. Draft 1\n1. New Dead Volume Calculations on NGSStarReadConfigFile_v3\n\n\n1.0 19/03/2019 - \n   - New liquid class for Eluate on Clean Ups\n   - Incubation time Resuspending lib during Clean Up : 420 --> 480 (+1min)\n   - Configuration File: Volume of Elution Buffer = +2ตL \n   - Configuration File: Dead Volume of EMseq Adapter and Diluted Stop Reagent = 0.1 --> 0.15 (+5%)\n\n1.0 20/03/2019 - \n   - New parameters for Stop Reagent: Slow down Mixing flow rate\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNext_EMseq\nBy:          Enrique Bayo, Hamilton Iberia\nDate:      February 13, 2018\nVersion:  1\n\nBased on  Draft: Version 1.8 NEBNext EM-seq\n\nVersion Notes:\n\n0. Draft 1\n1. New Dead Volume Calculations on NGSStarReadConfigFile_v3\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNext_EMseq\nBy:          Enrique Bayo, Hamilton Iberia\nDate:     August 20, 2020\nVersion:  1.8.1\n\nBased on  Draft: Version 1.8 NEBNext EM-seq\n\nVersion Notes:\n\n1. Change order of Oxidation reagents. System will dispense first the Oxidation Mix, then Fe and mix everything 3 times.\n2. Changed volumes for process 5 and 9 according to new array index\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNext_EMseq\nBy:          Enrique Bayo, Hamilton Iberia\nDate:    November 25, 2020\nVersion:  2.0\n\nBased on  Draft: Version 1.8 NEBNext EM-seq\n\nVersion Notes:\n\n1. Postponed primer plate loading if workflow c is performed. Conditions START with  process 8 and STOP is at least process 9.\n2. changed due to that smt : NGSStarReadConfigFile_v3 \n\n\n*************************************************************************************************************************************"));
}

private function _SelectProcesses(  ) void {
  private variable retValueDialog;
  private variable loopCounter2;
  private variable arrProcesses[];
  private file file1;
  private variable arrProcessSTART[];
  private variable arrProcessCombinations[];
  private dialog customDialog_1;
  private variable totalElements;
  private variable blnDialogActivateSTOP;
  private variable blnDialogActivateWKL;
  private variable currentValues;
  private variable currentStop;
  private variable blnDialogActivateODTC;
  private variable strSelectedIndexSTART;
  private variable loopCounter1;
  private variable currentProcess;
  private variable arrNewProcess[];
  private variable intTotalProcesses;
  private variable intCurrentProcess;
  private variable arrProcessesToPerform[];
  private variable intForbiddenIndexSTOP;
  private variable arrNotAllowedSTOPprocess[];
  private variable currentForbiddenProcess;
  private variable blnDialogActivateCycles;
  private variable strSelectedIndexSTOP;
  private variable intPositionInArray;
  private variable rtnSearchInArray;
  private variable loopCounter3;
  private variable arrProcessUsingODTC[];
  private variable intTotalActivationsOfODTC;
  private variable inTotalProcessToPerform;
  private dialog customDialog_2;
  private variable blnDialogActivateSizeSelection;
  private dialog customDialog_3;
  private dialog customDialog_4;
  private variable arrProcessesCleanUp[];
  private variable arrProcessUsingMastermix[];
  private variable intTotalActivationsOfCPAC;
  private variable arrBlnLoadCPAC[];
  private dialog customDialog_5;
  private variable intForbiddenProcessSTOP;
  private variable blnStrNotAllowedProcess;
  private variable blnRecordFound;
  private variable arrForbiddenSTOPProcessesThisRun[];
  private variable arrIndexForbiddenSTOPProcessesThisRun[];
  MECC::TraceComment(Translate("Define Config File full path for this method"));
  NGSSTARREADCONFIGFILE_V3::Return_ProcessIDs(_strConfigFileFullPath, arrProcessSTART);
  intTotalProcesses=arrProcessSTART.GetSize();
  _arrStrProcessIDs=arrProcessSTART;
  _strProcess01 = arrProcessSTART.ElementAt( 1 -1);
  _strProcess02 = arrProcessSTART.ElementAt( 2 -1);
  _strProcess03 = arrProcessSTART.ElementAt( 3 -1);
  _strProcess04 = arrProcessSTART.ElementAt( 4 -1);
  _strProcess05 = arrProcessSTART.ElementAt( 5 -1);
  _strProcess06 = arrProcessSTART.ElementAt( 6 -1);
  _strProcess07 = arrProcessSTART.ElementAt( 7 -1);
  _strProcess08 = arrProcessSTART.ElementAt( 8 -1);
  _strProcess09 = arrProcessSTART.ElementAt( 9 -1);
  _strProcess10 = arrProcessSTART.ElementAt( 10 -1);
  arrProcessCombinations.SetSize(0);
  arrProcessCombinations.AddAsLast(Translate("1,2,3"));
  arrProcessCombinations.AddAsLast(Translate("2,3"));
  arrProcessCombinations.AddAsLast(Translate("3"));
  arrProcessCombinations.AddAsLast(Translate("4,5,6,7"));
  arrProcessCombinations.AddAsLast(Translate("5,6,7"));
  arrProcessCombinations.AddAsLast(Translate("6,7"));
  arrProcessCombinations.AddAsLast(Translate("7"));
  arrProcessCombinations.AddAsLast(Translate("8,9,10"));
  arrProcessCombinations.AddAsLast(Translate("9,10"));
  arrProcessCombinations.AddAsLast(Translate("10"));
  if(0){
    arrProcessCombinations.AddAsLast(Translate("1,2,3,4,5,6,7,8,9,10"));
    arrProcessCombinations.AddAsLast(Translate("2,3,4,5,6,7,8,9,10"));
    arrProcessCombinations.AddAsLast(Translate("3,4,5,6,7,8,9,10"));
    arrProcessCombinations.AddAsLast(Translate("4,5,6,7,8,9,10"));
    arrProcessCombinations.AddAsLast(Translate("5,6,7,8,9,10"));
    arrProcessCombinations.AddAsLast(Translate("6,7,8,9,10"));
    arrProcessCombinations.AddAsLast(Translate("7,8,9,10"));
    arrProcessCombinations.AddAsLast(Translate("8,9,10"));
    arrProcessCombinations.AddAsLast(Translate("9,10"));
    arrProcessCombinations.AddAsLast(Translate("10"));
    arrProcessCombinations.AddAsLast(Translate("2,3,4,5,7,8,9,10"));
    arrProcessCombinations.AddAsLast(Translate("2,3,4,5,7,8,9,10"));
    arrProcessCombinations.AddAsLast(Translate("3,4,5,7,8,9,10"));
    arrProcessCombinations.AddAsLast(Translate("4,5,7,8,9,10"));
    arrProcessCombinations.AddAsLast(Translate("5,7,8,9,10"));
    arrProcessCombinations.AddAsLast(Translate("7,8,9,10"));
    arrProcessCombinations.AddAsLast(Translate("7,8,9,10"));
    arrProcessCombinations.AddAsLast(Translate("8,9,10"));
    arrProcessCombinations.AddAsLast(Translate("9,10"));
    arrProcessCombinations.AddAsLast(Translate("10"));
  }
  arrNotAllowedSTOPprocess.SetSize(0);
  arrNotAllowedSTOPprocess.AddAsLast(Translate("1"));
  arrNotAllowedSTOPprocess.AddAsLast(Translate("6"));
  arrProcessUsingODTC.SetSize(0);
  arrProcessUsingODTC.AddAsLast(1);
  arrProcessUsingODTC.AddAsLast(2);
  arrProcessUsingODTC.AddAsLast(4);
  arrProcessUsingODTC.AddAsLast(6);
  arrProcessUsingODTC.AddAsLast(7);
  arrProcessUsingODTC.AddAsLast(9);
  _arrProcessUsingODTC=arrProcessUsingODTC;
  arrProcessesCleanUp.SetSize(0);
  arrProcessesCleanUp.AddAsLast(3);
  arrProcessesCleanUp.AddAsLast(5);
  arrProcessesCleanUp.AddAsLast(8);
  arrProcessesCleanUp.AddAsLast(10);
  _arrProcessesCleanUp=arrProcessesCleanUp;
  arrBlnLoadCPAC.SetSize(0);
  arrProcessUsingMastermix.SetSize(0);
  arrProcessUsingMastermix.AddAsLast(1);
  arrProcessUsingMastermix.AddAsLast(2);
  arrProcessUsingMastermix.AddAsLast(4);
  arrProcessUsingMastermix.AddAsLast(6);
  arrProcessUsingMastermix.AddAsLast(7);
  arrProcessUsingMastermix.AddAsLast(9);
  _arrProcessUsingMastermix=arrProcessUsingMastermix;
  file1.AddField("AnswerStartPoint", _intSelectedIndexSTART, hslInteger);
  file1.AddField("AnswerStopPoint", _intSelectedIndexSTOP, hslInteger);
  file1.AddField("File_SampleSheet", _strFileInputWorklist, hslString, 255);
  file1.AddField("AnswerOdtcIswap", _blnODTCused, hslInteger);
  file1.SetDelimiter(";");
  if( 0 == file1.Open("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Files\CustomDialogFiles\CustomDialogDefaults_NEBNext_EMseq.txt", hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Files\CustomDialogFiles\CustomDialogDefaults_NEBNext_EMseq.txt", "HxMetEdCompCmd");
  }
  if( 0 == file1.ReadRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  blnDialogActivateSTOP = 0;
  blnDialogActivateWKL = 0;
  blnDialogActivateODTC = 0;
  blnDialogActivateCycles = 0;
  blnDialogActivateSizeSelection = 0;
  customDialog_2.InitCustomDialog("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");
  customDialog_2.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrProcessSTART );
  customDialog_2.SetCustomDialogArrayProperty( "comboBox2.ItemsSource", arrProcesses );
  customDialog_2.SetCustomDialogProperty( "Title", _strKitProviderKitName );
  customDialog_2.SetCustomDialogProperty( "comboBox2.IsEnabled", blnDialogActivateSTOP );
  customDialog_2.SetCustomDialogProperty( "textBox2.Text", _strEmailAdress );
  customDialog_2.SetCustomDialogProperty( "path1.IsEnabled", blnDialogActivateWKL );
  customDialog_2.SetCustomDialogProperty( "textBlock2.Text", _strProcess01 );
  customDialog_2.SetCustomDialogProperty( "textBlock3.Text", _strProcess02 );
  customDialog_2.SetCustomDialogProperty( "textBlock4.Text", _strProcess03 );
  customDialog_2.SetCustomDialogProperty( "textBlock5.Text", _strProcess04 );
  customDialog_2.SetCustomDialogProperty( "textBlock6.Text", _strProcess05 );
  customDialog_2.SetCustomDialogProperty( "textBlock7.Text", _strProcess06 );
  customDialog_2.SetCustomDialogProperty( "textBlock8.Text", _strProcess07 );
  customDialog_2.SetCustomDialogProperty( "textBlock9.Text", _strProcess08 );
  customDialog_2.SetCustomDialogProperty( "textBlock10.Text", _strProcess09 );
  customDialog_2.SetCustomDialogProperty( "textBlock11.Text", _strProcess10 );
  customDialog_2.ShowCustomDialog();
  retValueDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
  _intSelectedIndexSTART = customDialog_2.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
  _intSelectedIndexSTOP = customDialog_2.GetCustomDialogProperty( "comboBox2.SelectedIndex" );
  _strEmailAdress = customDialog_2.GetCustomDialogProperty( "textBox2.Text" );
  _strFileInputWorklist = customDialog_2.GetCustomDialogProperty( "path1.Path" );
  if (retValueDialog == 4)
  {
    blnDialogActivateSTOP = 1;
    arrNewProcess.SetSize(0);
    arrForbiddenSTOPProcessesThisRun.SetSize(0);
    arrIndexForbiddenSTOPProcessesThisRun.SetSize(0);
    currentValues=arrProcessCombinations.GetAt(_intSelectedIndexSTART-1);
    STRTOKENIZE::StrTokenize(currentValues, Translate(","), arrProcesses, 0);
    totalElements=arrProcesses.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < totalElements;)
      {
        loopCounter1 = loopCounter1 + 1;
        currentProcess=arrProcesses.GetAt(loopCounter1-1);
        blnStrNotAllowedProcess = APPSLIB::ArrayLookup(arrNotAllowedSTOPprocess, currentProcess, intForbiddenIndexSTOP);
        currentProcess = StrIVal(currentProcess);
        if (blnStrNotAllowedProcess == ASWGLOBAL::BOOL::TRUE)
        {
          intForbiddenProcessSTOP=arrNotAllowedSTOPprocess.GetAt(intForbiddenIndexSTOP-1);
          currentForbiddenProcess=arrProcessSTART.GetAt(currentProcess-1);
          currentForbiddenProcess = StrConcat4(currentForbiddenProcess, Translate(" - Unsafe stop point"), Translate(""), Translate(""));
          arrNewProcess.AddAsLast(currentForbiddenProcess);
          arrForbiddenSTOPProcessesThisRun.AddAsLast(currentForbiddenProcess);
          arrIndexForbiddenSTOPProcessesThisRun.AddAsLast(intForbiddenProcessSTOP);
        }
        else
        {
          APPSLIB::ArrayLookup(arrProcessSTART, currentStop, _intSelectedIndexSTOP);
          arrNewProcess.AddAsLast(arrProcessSTART.ElementAt( currentProcess -1));
        }
      }
    }
    strSelectedIndexSTART=arrProcessSTART.GetAt(_intSelectedIndexSTART-1);
  }
  else
  {
    if (retValueDialog == 2)
    {
      abort;
    }
  }
  APPSLIB::TraceArray(Translate("arrNewProcess: "), arrNewProcess);
  customDialog_3.InitCustomDialog("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");
  customDialog_3.SetCustomDialogArrayProperty( "comboBox2.ItemsSource", arrNewProcess );
  customDialog_3.SetCustomDialogProperty( "Title", _strKitProviderKitName );
  customDialog_3.SetCustomDialogProperty( "textBlock1.Text", _strKitName );
  customDialog_3.SetCustomDialogProperty( "comboBox2.IsEnabled", blnDialogActivateSTOP );
  customDialog_3.SetCustomDialogProperty( "path1.IsEnabled", blnDialogActivateWKL );
  customDialog_3.SetCustomDialogProperty( "textBlock2.Text", strSelectedIndexSTART );
  customDialog_3.ShowCustomDialog();
  retValueDialog = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
  _intSelectedIndexSTOP = customDialog_3.GetCustomDialogProperty( "comboBox2.SelectedIndex" );
  _strFileInputWorklist = customDialog_3.GetCustomDialogProperty( "path1.Path" );
  if (retValueDialog == 2)
  {
    abort;
  }
  currentStop=arrNewProcess.GetAt(_intSelectedIndexSTOP-1);
  Util2::Debug::TraceArray(Translate("arrForbiddenSTOPProcessesThisRun: "), arrForbiddenSTOPProcessesThisRun);
  blnRecordFound = APPSLIB::ArrayLookup(arrForbiddenSTOPProcessesThisRun, currentStop, _intSelectedIndexSTOP);
  if (blnRecordFound == ASWGLOBAL::BOOL::TRUE)
  {
    _intSelectedIndexSTOP = arrIndexForbiddenSTOPProcessesThisRun.ElementAt( _intSelectedIndexSTOP -1);
    _intSelectedIndexSTOP = StrIVal(_intSelectedIndexSTOP);
  }
  else
  {
    APPSLIB::ArrayLookup(arrProcessSTART, currentStop, _intSelectedIndexSTOP);
  }
  strSelectedIndexSTOP=arrProcessSTART.GetAt(_intSelectedIndexSTOP-1);
  file1.AddField("AnswerStartPoint", _intSelectedIndexSTART, hslInteger);
  file1.AddField("AnswerStopPoint", _intSelectedIndexSTOP, hslInteger);
  file1.AddField("File_SampleSheet", _strFileInputWorklist, hslString, 255);
  file1.AddField("AnswerOdtcIswap", _blnODTCused, hslInteger);
  file1.SetDelimiter(";");
  if( 0 == file1.Open("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Files\CustomDialogFiles\CustomDialogDefaults_NEBNext_EMseq.txt", hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\Program Files (x86)\HAMILTON\NGSStar\NEB\NEBNext_EMseq\Files\CustomDialogFiles\CustomDialogDefaults_NEBNext_EMseq.txt", "HxMetEdCompCmd");
  }
  if( 0 == file1.WriteRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  _arrBlnProcessActivation.SetSize(0);
  arrProcessesToPerform.SetSize(0);
  {
    for(intCurrentProcess = 0; intCurrentProcess < intTotalProcesses;)
    {
      intCurrentProcess = intCurrentProcess + 1;
      if (intCurrentProcess >= _intSelectedIndexSTART)
      {
        if (intCurrentProcess <= _intSelectedIndexSTOP)
        {
          arrProcessesToPerform.AddAsLast(intCurrentProcess);
          _arrBlnProcessActivation.AddAsLast(ASWGLOBAL::BOOL::TRUE);
        }
        else
        {
          _arrBlnProcessActivation.AddAsLast(ASWGLOBAL::BOOL::FALSE);
        }
      }
      else
      {
        _arrBlnProcessActivation.AddAsLast(ASWGLOBAL::BOOL::FALSE);
      }
    }
  }
  Util2::Debug::TraceArray(Translate("_arrBlnProcessActivation: "), _arrBlnProcessActivation);
  Util2::Debug::TraceArray(Translate("arrProcessesToPerform: "), arrProcessesToPerform);
  _arrProcessesToPerform=arrProcessesToPerform;
  Util2::Debug::TraceArray(Translate("arrProcessUsingODTC: "), arrProcessUsingODTC);
  intTotalActivationsOfODTC = 0;
  intTotalActivationsOfCPAC = 0;
  inTotalProcessToPerform=arrProcessesToPerform.GetSize();
  _inTotalProcessToPerform = inTotalProcessToPerform;
  {
    for(loopCounter3 = 0; loopCounter3 < inTotalProcessToPerform;)
    {
      loopCounter3 = loopCounter3 + 1;
      TrcTrace(Translate("Now finding Process "), arrProcessesToPerform.ElementAt( loopCounter3 -1));
      rtnSearchInArray = APPSLIB::ArrayLookup(arrProcessUsingODTC, arrProcessesToPerform.ElementAt( loopCounter3 -1), intPositionInArray);
      TrcTrace(Translate("Is in the array of Processes using ODTC?"), rtnSearchInArray);
      if (rtnSearchInArray == ASWGLOBAL::BOOL::TRUE)
      {
        intTotalActivationsOfODTC = intTotalActivationsOfODTC + 1;
      }
      else
      {
        intTotalActivationsOfODTC = intTotalActivationsOfODTC + 0;
      }
      rtnSearchInArray = APPSLIB::ArrayLookup(arrProcessUsingMastermix, arrProcessesToPerform.ElementAt( loopCounter3 -1), intPositionInArray);
      TrcTrace(Translate("Is in the array of Processes using CPAC?"), rtnSearchInArray);
      if (rtnSearchInArray == ASWGLOBAL::BOOL::TRUE)
      {
        intTotalActivationsOfCPAC = intTotalActivationsOfCPAC + 1;
      }
      else
      {
        intTotalActivationsOfCPAC = intTotalActivationsOfCPAC + 0;
      }
      TrcTrace(Translate("Activations of ODTC required "), intTotalActivationsOfODTC);
      TrcTrace(Translate("Activations of CPACrequired "), intTotalActivationsOfCPAC);
    }
  }
  blnDialogActivateWKL = 1;
  if (intTotalActivationsOfODTC > 0)
  {
    blnDialogActivateODTC = 1;
  }
  if (_arrBlnProcessActivation.ElementAt( 10 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    blnDialogActivateSizeSelection = 1;
  }
  else
  {
    blnDialogActivateSizeSelection = 0;
  }
  {
    loopCounter2 = 0;
    while (1 == 1)
    {
      loopCounter2 = loopCounter2 + 1;
      if (_arrBlnProcessActivation.ElementAt( 9 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        blnDialogActivateCycles = 1;
        if (_arrBlnProcessActivation.ElementAt( 10 -1) == ASWGLOBAL::BOOL::TRUE)
        {
          blnDialogActivateSizeSelection = 1;
        }
        customDialog_5.InitCustomDialog("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");
        customDialog_5.SetCustomDialogProperty( "Title", _strKitProviderKitName );
        customDialog_5.SetCustomDialogProperty( "groupBoxSizeSelection.IsVisible", blnDialogActivateSizeSelection );
        customDialog_5.SetCustomDialogProperty( "groupBoxODTC.IsVisible", blnDialogActivateODTC );
        customDialog_5.SetCustomDialogProperty( "path1.IsEnabled", blnDialogActivateWKL );
        customDialog_5.SetCustomDialogProperty( "checkBox1.IsVisible", blnDialogActivateODTC );
        customDialog_5.SetCustomDialogProperty( "checkBox1.IsEnabled", blnDialogActivateODTC );
        customDialog_5.SetCustomDialogProperty( "image1.IsVisible", blnDialogActivateODTC );
        customDialog_5.SetCustomDialogProperty( "textBlock2.Text", strSelectedIndexSTART );
        customDialog_5.SetCustomDialogProperty( "textBlock3.Text", strSelectedIndexSTOP );
        customDialog_5.SetCustomDialogProperty( "comboBox2.IsVisible", blnDialogActivateSizeSelection );
        customDialog_5.ShowCustomDialog();
        retValueDialog = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
        _strFileInputWorklist = customDialog_5.GetCustomDialogProperty( "path1.Path" );
        _blnODTCused = customDialog_5.GetCustomDialogProperty( "checkBox1.IsChecked" );
        _intPCRCycles = customDialog_5.GetCustomDialogProperty( "comboBox1.Text" );
        _intSelecedSizeSelectionIndex = customDialog_5.GetCustomDialogProperty( "comboBox2.SelectedIndex" );
        if (retValueDialog == 2)
        {
          abort;
        }
      }
      else
      {
        blnDialogActivateCycles = 0;
        if (_arrBlnProcessActivation.ElementAt( 10 -1) == ASWGLOBAL::BOOL::TRUE)
        {
          blnDialogActivateSizeSelection = 1;
        }
        customDialog_4.InitCustomDialog("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");
        customDialog_4.SetCustomDialogProperty( "Title", _strKitProviderKitName );
        customDialog_4.SetCustomDialogProperty( "groupBoxSizeSelection.IsVisible", blnDialogActivateSizeSelection );
        customDialog_4.SetCustomDialogProperty( "groupBoxODTC.IsVisible", blnDialogActivateODTC );
        customDialog_4.SetCustomDialogProperty( "textBlock1.Text", _strKitName );
        customDialog_4.SetCustomDialogProperty( "path1.IsEnabled", blnDialogActivateWKL );
        customDialog_4.SetCustomDialogProperty( "checkBox1.IsVisible", blnDialogActivateODTC );
        customDialog_4.SetCustomDialogProperty( "checkBox1.IsEnabled", blnDialogActivateODTC );
        customDialog_4.SetCustomDialogProperty( "image1.IsVisible", blnDialogActivateODTC );
        customDialog_4.SetCustomDialogProperty( "textBlock2.Text", strSelectedIndexSTART );
        customDialog_4.SetCustomDialogProperty( "textBlock3.Text", strSelectedIndexSTOP );
        customDialog_4.SetCustomDialogProperty( "comboBox2.IsVisible", blnDialogActivateSizeSelection );
        customDialog_4.ShowCustomDialog();
        retValueDialog = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
        _strFileInputWorklist = customDialog_4.GetCustomDialogProperty( "path1.Path" );
        _blnODTCused = customDialog_4.GetCustomDialogProperty( "checkBox1.IsChecked" );
        _intSelecedSizeSelectionIndex = customDialog_4.GetCustomDialogProperty( "comboBox2.SelectedIndex" );
        if (retValueDialog == 2)
        {
          abort;
        }
      }
      if (_strFileInputWorklist == "")
      {
        customDialog_1.InitCustomDialog("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");
        customDialog_1.SetCustomDialogProperty( "Title", _strKitProviderKitName );
        customDialog_1.ShowCustomDialog();
        retValueDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        if (retValueDialog == 2)
        {
          abort;
        }
      }
      else
      {
        break;
      }
    }
  }
  _intTotalActivationsOfCPAC = intTotalActivationsOfCPAC;
  if (_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    HSLLabwState::SetLabwareVisibility(ML_STAR, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 200, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    HSLLabwState::SetLabwareVisibility(ML_STAR, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 200, ASWGLOBAL::BOOL::FALSE);
  }
  strLiquidToModify = Translate("Sample Purification Beads");
  if( 0 != fileNGSConfig.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  fileNGSConfig.RemoveFields();
  if (_intSelectedIndexSTOP >= 10)
  {
    if (_intSelecedSizeSelectionIndex == 2)
    {
      strSQLSentence = StrConcat12("UPDATE [Reagents$] SET [Volume per Sample] = 91 WHERE [Name] = '", strLiquidToModify,"' AND [ProcessNumber] = 10","","","","","","","","","");
      TrcTrace(Translate("strSQLSentence: "), strSQLSentence);
      fileNGSConfig.AddField("ProcessNumber", fileNGSConfig_ProcessNumber, hslInteger);
      fileNGSConfig.AddField("ProcessID", fileNGSConfig_ProcessID, hslString, 255);
      fileNGSConfig.AddField("Reagent", fileNGSConfig_Reagent, hslString, 255);
      fileNGSConfig.AddField("Name", fileNGSConfig_Name, hslString, 255);
      fileNGSConfig.AddField("Labware Type", fileNGSConfig_Labware_Type, hslString, 255);
      fileNGSConfig.AddField("Carrier", fileNGSConfig_Carrier, hslString, 255);
      fileNGSConfig.AddField("PositionID", fileNGSConfig_PositionID, hslString, 255);
      fileNGSConfig.AddField("Volume per Sample", fileNGSConfig_Volume_per_Sample, hslFloat);
      fileNGSConfig.AddField("Dead Volume Reagent", fileNGSConfig_Dead_Volume_Reagent, hslFloat);
      fileNGSConfig.AddField("Dead Volume Labware", fileNGSConfig_Dead_Volume_Labware, hslFloat);
      fileNGSConfig.AddField("Maximum Volume Labware", fileNGSConfig_Maximum_Volume_Labware, hslFloat);
      fileNGSConfig.AddField("Liquid Class Name", fileNGSConfig_Liquid_Class_Name, hslString, 255);
      if( 0 == fileNGSConfig.Open(_strConfigFileFullPath + " " + "Reagents$", hslRead, strSQLSentence) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strConfigFileFullPath, "HxMetEdCompCmd");
      }
      if( 0 != fileNGSConfig.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      fileNGSConfig.RemoveFields();
      strSQLSentence = StrConcat12("UPDATE [Reagents$] SET [Volume per Sample] = ", 90 + t_fileNGSConfig_Volume_NucleaseFreeWaterVariable," WHERE [ProcessNumber] = 10 AND [Name] = 'Nuclease free Water'","","","","","","","","","");
      TrcTrace(Translate("strSQLSentence: "), strSQLSentence);
      fileNGSConfig.AddField("ProcessNumber", fileNGSConfig_ProcessNumber, hslInteger);
      fileNGSConfig.AddField("ProcessID", fileNGSConfig_ProcessID, hslString, 255);
      fileNGSConfig.AddField("Reagent", fileNGSConfig_Reagent, hslString, 255);
      fileNGSConfig.AddField("Name", fileNGSConfig_Name, hslString, 255);
      fileNGSConfig.AddField("Labware Type", fileNGSConfig_Labware_Type, hslString, 255);
      fileNGSConfig.AddField("Carrier", fileNGSConfig_Carrier, hslString, 255);
      fileNGSConfig.AddField("PositionID", fileNGSConfig_PositionID, hslString, 255);
      fileNGSConfig.AddField("Volume per Sample", fileNGSConfig_Volume_per_Sample, hslFloat);
      fileNGSConfig.AddField("Dead Volume Reagent", fileNGSConfig_Dead_Volume_Reagent, hslFloat);
      fileNGSConfig.AddField("Dead Volume Labware", fileNGSConfig_Dead_Volume_Labware, hslFloat);
      fileNGSConfig.AddField("Maximum Volume Labware", fileNGSConfig_Maximum_Volume_Labware, hslFloat);
      fileNGSConfig.AddField("Liquid Class Name", fileNGSConfig_Liquid_Class_Name, hslString, 255);
      if( 0 == fileNGSConfig.Open(_strConfigFileFullPath + " " + "Reagents$", hslRead, strSQLSentence) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strConfigFileFullPath, "HxMetEdCompCmd");
      }
      if( 0 != fileNGSConfig.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      fileNGSConfig.RemoveFields();
    }
    else
    {
      strSQLSentence = StrConcat12("UPDATE [Reagents$] SET [Volume per Sample] = 45 WHERE [Name] = '", strLiquidToModify,"' AND [ProcessNumber] = 10","","","","","","","","","");
      TrcTrace(Translate("strSQLSentence: "), strSQLSentence);
      fileNGSConfig.AddField("ProcessNumber", fileNGSConfig_ProcessNumber, hslInteger);
      fileNGSConfig.AddField("ProcessID", fileNGSConfig_ProcessID, hslString, 255);
      fileNGSConfig.AddField("Reagent", fileNGSConfig_Reagent, hslString, 255);
      fileNGSConfig.AddField("Name", fileNGSConfig_Name, hslString, 255);
      fileNGSConfig.AddField("Labware Type", fileNGSConfig_Labware_Type, hslString, 255);
      fileNGSConfig.AddField("Carrier", fileNGSConfig_Carrier, hslString, 255);
      fileNGSConfig.AddField("PositionID", fileNGSConfig_PositionID, hslString, 255);
      fileNGSConfig.AddField("Volume per Sample", fileNGSConfig_Volume_per_Sample, hslFloat);
      fileNGSConfig.AddField("Dead Volume Reagent", fileNGSConfig_Dead_Volume_Reagent, hslFloat);
      fileNGSConfig.AddField("Dead Volume Labware", fileNGSConfig_Dead_Volume_Labware, hslFloat);
      fileNGSConfig.AddField("Maximum Volume Labware", fileNGSConfig_Maximum_Volume_Labware, hslFloat);
      fileNGSConfig.AddField("Liquid Class Name", fileNGSConfig_Liquid_Class_Name, hslString, 255);
      if( 0 == fileNGSConfig.Open(_strConfigFileFullPath + " " + "Reagents$", hslRead, strSQLSentence) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strConfigFileFullPath, "HxMetEdCompCmd");
      }
      if( 0 != fileNGSConfig.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      fileNGSConfig.RemoveFields();
    }
  }
  if (_intSelectedIndexSTOP >= 10)
  {
    if (_intSelecedSizeSelectionIndex == 2)
    {
      strSQLSentence = StrConcat12("UPDATE [Resources$] SET [Tips50] = 2 , [Tips300] = 6 WHERE [Process] = 10","","","","","","","","","","","");
      TrcTrace(Translate("strSQLSentence: "), strSQLSentence);
    }
    else
    {
      strSQLSentence = StrConcat12("UPDATE [Resources$] SET [Tips50] = 3 , [Tips300] = 5 WHERE [Process] = 10","","","","","","","","","","","");
      TrcTrace(Translate("strSQLSentence: "), strSQLSentence);
    }
  }
  else
  {
    strSQLSentence = StrConcat12("UPDATE [Resources$] SET [Tips50] = 3 , [Tips300] = 5 WHERE [Process] = 10","","","","","","","","","","","");
    TrcTrace(Translate("strSQLSentence: "), strSQLSentence);
  }
  fileNGSConfig.AddField("Process", fileNGSConfig_Process, hslFloat);
  fileNGSConfig.AddField("Tips50", fileNGSConfig_Tips50, hslFloat);
  fileNGSConfig.AddField("Tips300", fileNGSConfig_Tips300, hslFloat);
  fileNGSConfig.AddField("Tips1000", fileNGSConfig_Tips1000, hslFloat);
  fileNGSConfig.AddField("Extra Tips 50", fileNGSConfig_Extra_Tips_50, hslFloat);
  fileNGSConfig.AddField("Extra Tips 300", fileNGSConfig_Extra_Tips_300, hslFloat);
  fileNGSConfig.AddField("Extra Tips 1000", fileNGSConfig_Extra_Tips_1000, hslFloat);
  fileNGSConfig.AddField("ComfortLids", fileNGSConfig_ComfortLids, hslFloat);
  fileNGSConfig.AddField("HSP", fileNGSConfig_HSP, hslFloat);
  fileNGSConfig.AddField("MIDI", fileNGSConfig_MIDI, hslFloat);
  if( 0 == fileNGSConfig.Open(_strConfigFileFullPath + " " + "Resources$", hslRead, strSQLSentence) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strConfigFileFullPath, "HxMetEdCompCmd");
  }
  if( 0 != fileNGSConfig.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  fileNGSConfig.RemoveFields();
  TrcTrace(Translate(">>>>>>>>>>>>>>> Simulation Mode (_blnSimulationMode) : "), _blnSimulationMode);
  TrcTrace(Translate(">>>>>>>>>>>>>>> START at (_intSelectedIndexSTART) : "), _intSelectedIndexSTART);
  TrcTrace(Translate(">>>>>>>>>>>>>>> STOP at (_intSelectedIndexSTOP) : "), _intSelectedIndexSTOP);
  TrcTrace(Translate(">>>>>>>>>>>>>>> Input Worklist File Path (_strFileInputWorklist) : "), _strFileInputWorklist);
  TrcTrace(Translate(">>>>>>>>>>>>>>> Using ODTC (_blnODTCused) : "), _blnODTCused);
  TrcTrace(Translate(">>>>>>>>>>>>>>> PCR Cycles Selected - only on Process 9 (intPCRCycles) : "), _intPCRCycles);
  TrcTrace(Translate("Size Selection - only on Process 10 (intSelecedSizeSelectionIndex) : "), _intSelecedSizeSelectionIndex);
}

private function _Loading( variable & i_arrColumnHeaders[], variable i_strTopText, variable i_strBottomText, variable i_strTopImageFilePath, variable i_intImageSize, variable & io_arrPositions[], variable & io_arrQuantities[], variable & io_arrDescriptions[] ) void {
  private variable intResult;
  AswStandardDialogs::LoadingDialogSetResources(i_arrColumnHeaders);
  intResult = AswStandardDialogs::LoadingDialog(Translate("Load the following Carrier"), AswStandardDialogs::ButtonType::OkCancel, 0, 0, 0, i_strTopText, i_strBottomText, i_strTopImageFilePath, Translate(""), i_intImageSize, io_arrPositions, io_arrQuantities, io_arrDescriptions);
  if (intResult == 2)
  {
    abort;
  }
  io_arrPositions.SetSize(0);
  io_arrQuantities.SetSize(0);
  io_arrDescriptions.SetSize(0);
}

private function _CalculateAndLoadConsumables(  ) void {
  NGSSTARREADCONFIGFILE_V3::ReadConfigFile(ML_STAR, _strConfigFileFullPath, _arrProcessesToPerform, _intNumSamplesFromFile, _strIndexFormat, _arrayIndex1IDs, _arrayIndex2IDs, _arrayIndex1Positions, _arrayIndex2Positions, _blnSimulationMode, _blnODTCused, _blnDisableLoadingCarrierCommands, _arrSeqToAspirate, _arrFltVolumeReagentPerSample, _arrStrReagentNames, _arrSeqStackMIDI, _arrSeqStackHSP, _arrSeqStackComfortLid, _arrIntNumberOfTipsPerProcess);
  _intIndexHSPFromStack = 0;
  _intIndexMIDIFromStack = 0;
  _intIndexComfortLidFromStack = 0;
  Util2::Debug::TraceArray_2(Translate("Array of Volumes/Reagent/Sample          ReagentNames"), _arrFltVolumeReagentPerSample, _arrStrReagentNames);
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  AswStandardDialogs::MessageDialog(Translate("Deck loaded"), AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, Translate("The deck is finished loading for the next process.\nClick OK to continue with the method."));
}

private function Process01_EndPrep(  ) void {
  private variable strReadCurrentBarcode;
  private sequence seqPlaceComfortLid;
  private sequence seqGetComfortLid;
  private variable retValueDialog;
  private variable strProcessMsgCompleted;
  private variable strProcessMsgStart;
  private variable strLiquidClassNEBNext_EndPrep_Mix;
  private sequence seqGetPlate;
  private sequence seqPlacePlate;
  private dialog customDialog_6;
  private dialog customDialog_7;
  private dialog customDialog_8;
  private dialog customDialog_9;
  private variable strBatchInformation;
  private variable strVolume_EndPrep_MasterMix;
  private dialog customDialog_10;
  private dialog customDialog_11;
  MECC::TraceComment(Translate("**********************************************************************************************************************************************\n******************** SUBMETHOD START: Process01_EndPrep ************\n**********************************************************************************************************************************************"));
  strProcessMsgStart = StrConcat4(_arrStrProcessIDs.ElementAt( 1 -1), Translate(" >>> START"), Translate(""), Translate(""));
  strProcessMsgCompleted = StrConcat4(_arrStrProcessIDs.ElementAt( 1 -1), Translate(" >>> COMPLETED"), Translate(""), Translate(""));
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(_strStatusDialogTitle_KitName);
  AswStatusDialog::SetStatusText(strProcessMsgStart);
  REFORMATSTRING::ExtractNumberOfTipsFromString(_arrIntNumberOfTipsPerProcess.ElementAt( 1 -1), _intRequiredNumberOf50uLTipsM1, _intRequiredNumberOf300uLTipsM1, _intRequiredNumberOf300uLTipsMPHM1, _intRequiredNumberOf1000uLTipsM1);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, _intRequiredNumberOf50uLTipsM1, _intRequiredNumberOf300uLTipsM1, _intRequiredNumberOf300uLTipsMPHM1, _intRequiredNumberOf1000uLTipsM1, 5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if (_blnIsODTCInstalled == ASWGLOBAL::BOOL::TRUE)
  {
    if (_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
      {
        if (_blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
        {
        }
        else
        {
          NGSSTARPREP::ODTC_WaitForLidAndBlockCorrectTemperature(_intDeviceNumberODTC, 20, 30);
        }
      }
    }
  }
  strLiquidClassNEBNext_EndPrep_Mix = Translate("NEBNext_EMseq_50F_EndPrep_MasterMix_SurfaceEmpty");
  MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Transfer End Prep Reaction Buffer and Enzyme Mix - Start\n"));
  REFORMATSTRING::ReformatStringFloatDecimalPoints(_fltVolume_EndPrep_MasterMix, strVolume_EndPrep_MasterMix);
  strBatchInformation = StrConcat4(Translate("   Adding "), strVolume_EndPrep_MasterMix, Translate(" ul of End Prep Master Mix"), Translate(""));
  AswStatusDialog::AppendText(strBatchInformation);
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, _seqAspirate_EndPrep_Mastermix, _seqDispense_EndPrep_Mastermix, _fltVolume_EndPrep_MasterMix, strLiquidClassNEBNext_EndPrep_Mix, ASWGLOBAL::BOOL::TRUE, 8, _fltVolume_EndPrep_Mixing, 0, 0, ASWGLOBAL::BOOL::TRUE);
  }
  MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Transfer End Prep Reaction Buffer and Enzyme Mix - Completed\n"));
  if (_blnIsODTCInstalled == ASWGLOBAL::BOOL::TRUE)
  {
    if (_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      SeqCopySequence(seqGetPlate, ML_STAR.HSP_Pipette);
      SeqCopySequence(seqPlacePlate, ML_STAR.HSP_ODTC);
      SeqCopySequence(seqGetComfortLid, ML_STAR.Ham_ComfortLid_Stack_ParkPos);
      SeqCopySequence(seqPlaceComfortLid, ML_STAR.Ham_ComfortLid_ODTC);
      _strODTCProtocolName = Translate("P1_EndPrep");
      TrcTrace(Translate(">>>>>>>>>> Process1: _strODTCProtocolName: "), _strODTCProtocolName);
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation in ODTC - Start\n"));
      AswStatusDialog::AppendText(Translate("   Moving plate to ODTC for End Prep incubation"));
      if (_blnSimulationMode == ASWGLOBAL::BOOL::FALSE)
      {
        if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(_intDeviceNumberODTC, intTimeForProtocol, intRequestIDForActiveProtocol);
        }
        NGSSTARPREP::ODTC_OpenDoor(_intDeviceNumberODTC);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Plate to ODTC"));
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, seqGetPlate, seqPlacePlate, 0, 0, strReadCurrentBarcode, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Comfort Lid to ODTC"));
        NGSSTARPROCESSES::Trp_HamiltonComfortLidWithiSWAP(ML_STAR, seqGetComfortLid, seqPlaceComfortLid, 1, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Execute protocol in ODTC"));
        NGSSTARPREP::ODTC_CloseDoor(_intDeviceNumberODTC);
        if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPREP::ODTC_ExecuteProtocol(_intDeviceNumberODTC, _strODTCScriptPath, _strODTCProtocolName, intTimeForProtocol, intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
          if(0){
            HSLCountdownLib::ShowDialog(intTimeForProtocol, Translate("Process 01: End Prep Incubation in ODTC. Remaining Time"), 1, 0);
          }
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(_intDeviceNumberODTC, intTimeForProtocol, intRequestIDForActiveProtocol);
        }
        NGSSTARPREP::ODTC_OpenDoor(_intDeviceNumberODTC);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Comfort Lid from ODTC"));
        NGSSTARPROCESSES::Trp_HamiltonComfortLidWithiSWAP(ML_STAR, seqPlaceComfortLid, seqGetComfortLid, 0, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Plate from ODTC"));
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, seqPlacePlate, seqGetPlate, 0, 1, strReadCurrentBarcode, ASWGLOBAL::BOOL::TRUE);
      }
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation in ODTC - Completed\n"));
    }
    else
    {
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Start\n"));
      AswStatusDialog::AppendText(Translate("   Unloading HSP plate for off-deck End Prep incubation"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
      if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      customDialog_6.InitCustomDialog("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");
      customDialog_6.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_6.ShowCustomDialog();
      retValueDialog = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
      if (_intSelectedIndexSTOP == 1)
      {
        AswStatusDialog::AppendText(strProcessMsgCompleted);
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        customDialog_8.InitCustomDialog("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");
        customDialog_8.SetCustomDialogProperty( "Title", _strKitName );
        customDialog_8.SetCustomDialogProperty( "textBlock2.Text", strProcessMsgCompleted );
        customDialog_8.ShowCustomDialog();
        retValueDialog = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
      }
      else
      {
        AswStatusDialog::AppendText(Translate("   Off-deck End Prep incubation complete"));
        customDialog_10.InitCustomDialog("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");
        customDialog_10.SetCustomDialogProperty( "Title", _strKitName );
        customDialog_10.ShowCustomDialog();
        retValueDialog = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
        AswStatusDialog::AppendText(Translate("   Loading the carrier on Track 35"));
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Load Carrier"));
        if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        }
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        AswStatusDialog::AppendText(strProcessMsgCompleted);
      }
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Completed\n"));
    }
  }
  else
  {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Start\n"));
    AswStatusDialog::AppendText(Translate("   Unloading HSP plate for off-deck End Prep incubation"));
    MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
    if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    customDialog_7.InitCustomDialog("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");
    customDialog_7.SetCustomDialogProperty( "Title", _strKitName );
    customDialog_7.ShowCustomDialog();
    retValueDialog = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
    if (_intSelectedIndexSTOP == 1)
    {
      AswStatusDialog::AppendText(strProcessMsgCompleted);
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      customDialog_9.InitCustomDialog("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");
      customDialog_9.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_9.SetCustomDialogProperty( "textBlock2.Text", strProcessMsgCompleted );
      customDialog_9.ShowCustomDialog();
      retValueDialog = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
    }
    else
    {
      AswStatusDialog::AppendText(Translate("   Off-deck End Prep incubation complete"));
      customDialog_11.InitCustomDialog("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");
      customDialog_11.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_11.ShowCustomDialog();
      retValueDialog = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
      AswStatusDialog::AppendText(Translate("   Loading the carrier on Track 35"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Load Carrier"));
      if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      AswStatusDialog::AppendText(strProcessMsgCompleted);
    }
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Completed\n"));
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  Process01_EndPrep ********************"));
}

private function Process02_AdapterLigation(  ) void {
  private sequence seqPlaceComfortLid;
  private sequence seqGetComfortLid;
  private variable retValueDialog;
  private variable strReadCurrentBarcode;
  private variable strProcessMsgCompleted;
  private variable strProcessMsgStart;
  private variable strLiquidClass_AdapterLigation_Mix;
  private variable strLiquidClass_AdapterLigation_EMseqAdapter;
  private sequence seqGetPlate;
  private sequence seqPlacePlate;
  private dialog customDialog_12;
  private dialog customDialog_13;
  private dialog customDialog_14;
  private dialog customDialog_15;
  private dialog customDialog_16;
  private dialog customDialog_17;
  private variable strBatchInformation;
  private variable strVolume_AdapterLigation_EMseqAdapter;
  private variable strVolume_AdapterLigation_Mix;
  MECC::TraceComment(Translate("**********************************************************************************************************************************************\n******************** SUBMETHOD START: Process02_AdapterLigation ************\n**********************************************************************************************************************************************"));
  strProcessMsgStart = StrConcat4(_arrStrProcessIDs.ElementAt( 2 -1), Translate(" >>> START"), Translate(""), Translate(""));
  strProcessMsgCompleted = StrConcat4(_arrStrProcessIDs.ElementAt( 2 -1), Translate(" >>> COMPLETED"), Translate(""), Translate(""));
  strLiquidClass_AdapterLigation_Mix = Translate("NEBNext_EMseq_50F_AdaptorLigation_MasterMix_SurfaceEmpty");
  strLiquidClass_AdapterLigation_EMseqAdapter = Translate("NEBNext_EMseq_50F_EMseqAdaptor_SurfaceEmpty");
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(_strStatusDialogTitle_KitName);
  AswStatusDialog::SetStatusText(strProcessMsgStart);
  REFORMATSTRING::ExtractNumberOfTipsFromString(_arrIntNumberOfTipsPerProcess.ElementAt( 2 -1), _intRequiredNumberOf50uLTipsM2, _intRequiredNumberOf300uLTipsM2, _intRequiredNumberOf300uLTipsMPHM2, _intRequiredNumberOf1000uLTipsM2);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, _intRequiredNumberOf50uLTipsM2, _intRequiredNumberOf300uLTipsM2, _intRequiredNumberOf300uLTipsMPHM2, _intRequiredNumberOf1000uLTipsM2, 5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if (_blnIsODTCInstalled == ASWGLOBAL::BOOL::TRUE)
  {
    if (_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
      {
        if (_blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
        {
        }
        else
        {
          NGSSTARPREP::ODTC_WaitForLidAndBlockCorrectTemperature(_intDeviceNumberODTC, 10, 30);
        }
      }
    }
  }
  REFORMATSTRING::ReformatStringFloatDecimalPoints(_fltVolume_AdapterLigation_EMseqAdapter, strVolume_AdapterLigation_EMseqAdapter);
  strBatchInformation = StrConcat4(Translate("   Adding "), strVolume_AdapterLigation_EMseqAdapter, Translate(" ul of EM-seq adapters"), Translate(""));
  AswStatusDialog::AppendText(strBatchInformation);
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, _seqAspirate_AdapterLigation_EMseqAdapter, _seqDispense_AdapterLigation_EMseqAdapter, _fltVolume_AdapterLigation_EMseqAdapter, strLiquidClass_AdapterLigation_EMseqAdapter, ASWGLOBAL::BOOL::TRUE, 2, _fltVolume_AdapterLigation_EMseqAdapter, 0, 0, ASWGLOBAL::BOOL::TRUE);
  }
  REFORMATSTRING::ReformatStringFloatDecimalPoints(_fltVolume_AdapterLigation_Mix, strVolume_AdapterLigation_Mix);
  strBatchInformation = StrConcat4(Translate("   Adding "), strVolume_AdapterLigation_Mix, Translate(" ul of Adapter Ligation Master Mix"), Translate(""));
  AswStatusDialog::AppendText(strBatchInformation);
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, _seqAspirate_AdapterLigation_Mix, _seqDispense_AdapterLigation_Mix, _fltVolume_AdapterLigation_Mix, strLiquidClass_AdapterLigation_Mix, ASWGLOBAL::BOOL::TRUE, 10, _fltVolume_AdapterLigation_Mixing, 0, 0, ASWGLOBAL::BOOL::TRUE);
  }
  if (_blnIsODTCInstalled == ASWGLOBAL::BOOL::TRUE)
  {
    if (_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      _strODTCProtocolName = Translate("P2_Ligation");
      TrcTrace(Translate(">>>>>>>>>> Process2: _strODTCProtocolName: "), _strODTCProtocolName);
      SeqCopySequence(seqGetPlate, ML_STAR.HSP_Pipette);
      SeqCopySequence(seqPlacePlate, ML_STAR.HSP_ODTC);
      SeqCopySequence(seqGetComfortLid, ML_STAR.Ham_ComfortLid_Stack_ParkPos);
      SeqCopySequence(seqPlaceComfortLid, ML_STAR.Ham_ComfortLid_ODTC);
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation in ODTC - Start\n"));
      AswStatusDialog::AppendText(Translate("   Moving plate to ODTC for Adapter Ligation"));
      if (_blnSimulationMode == ASWGLOBAL::BOOL::FALSE)
      {
        if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(_intDeviceNumberODTC, intTimeForProtocol, intRequestIDForActiveProtocol);
        }
        NGSSTARPREP::ODTC_OpenDoor(_intDeviceNumberODTC);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Plate to ODTC"));
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, seqGetPlate, seqPlacePlate, 0, 0, strReadCurrentBarcode, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Comfort Lid to ODTC"));
        NGSSTARPROCESSES::Trp_HamiltonComfortLidWithiSWAP(ML_STAR, seqGetComfortLid, seqPlaceComfortLid, 1, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Execute protocol in ODTC"));
        NGSSTARPREP::ODTC_CloseDoor(_intDeviceNumberODTC);
        if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPREP::ODTC_ExecuteProtocol(_intDeviceNumberODTC, _strODTCScriptPath, _strODTCProtocolName, intTimeForProtocol, intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
          if(0){
            HSLCountdownLib::ShowDialog(intTimeForProtocol, Translate("Process 02: Adapter Ligation Incubation in ODTC. Remaining Time"), 1, 0);
          }
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(_intDeviceNumberODTC, intTimeForProtocol, intRequestIDForActiveProtocol);
        }
        NGSSTARPREP::ODTC_OpenDoor(_intDeviceNumberODTC);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Comfort Lid from ODTC"));
        NGSSTARPROCESSES::Trp_HamiltonComfortLidWithiSWAP(ML_STAR, seqPlaceComfortLid, seqGetComfortLid, 0, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Plate from ODTC"));
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, seqPlacePlate, seqGetPlate, 0, 1, strReadCurrentBarcode, ASWGLOBAL::BOOL::TRUE);
        NGSSTARPREP::ODTC_CloseDoor(_intDeviceNumberODTC);
        NGSSTARPREP::ODTC_Terminate(_intDeviceNumberODTC);
        _blnODTCTerminatedPrematurely = ASWGLOBAL::BOOL::TRUE;
      }
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation in ODTC - Completed\n"));
    }
    else
    {
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Start\n"));
      AswStatusDialog::AppendText(Translate("   Loading HSP plate for off-deck Adapter Ligation incubation"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
      if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      customDialog_16.InitCustomDialog("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");
      customDialog_16.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_16.ShowCustomDialog();
      retValueDialog = customDialog_16.GetCustomDialogProperty( "ReturnValue" );
      if (_intSelectedIndexSTOP == 2)
      {
        AswStatusDialog::AppendText(strProcessMsgCompleted);
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        customDialog_13.InitCustomDialog("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");
        customDialog_13.SetCustomDialogProperty( "Title", _strKitName );
        customDialog_13.SetCustomDialogProperty( "textBlock2.Text", strProcessMsgCompleted );
        customDialog_13.ShowCustomDialog();
        retValueDialog = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
      }
      else
      {
        AswStatusDialog::AppendText(Translate("   Off-deck Adapter Ligation incubation complete"));
        customDialog_14.InitCustomDialog("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");
        customDialog_14.SetCustomDialogProperty( "Title", _strKitName );
        customDialog_14.ShowCustomDialog();
        retValueDialog = customDialog_14.GetCustomDialogProperty( "ReturnValue" );
        AswStatusDialog::AppendText(Translate("   Loading the carrier on Track 35"));
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Load Carrier"));
        if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        }
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        AswStatusDialog::AppendText(strProcessMsgCompleted);
      }
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Completed\n"));
    }
  }
  else
  {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Start\n"));
    AswStatusDialog::AppendText(Translate("   Loading HSP plate for off-deck Adapter Ligation incubation"));
    MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
    if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    customDialog_12.InitCustomDialog("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");
    customDialog_12.SetCustomDialogProperty( "Title", _strKitName );
    customDialog_12.ShowCustomDialog();
    retValueDialog = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
    if (_intSelectedIndexSTOP == 2)
    {
      AswStatusDialog::AppendText(strProcessMsgCompleted);
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      customDialog_17.InitCustomDialog("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");
      customDialog_17.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_17.SetCustomDialogProperty( "textBlock2.Text", strProcessMsgCompleted );
      customDialog_17.ShowCustomDialog();
      retValueDialog = customDialog_17.GetCustomDialogProperty( "ReturnValue" );
    }
    else
    {
      AswStatusDialog::AppendText(Translate("   Off-deck Adapter Ligation incubation complete"));
      customDialog_15.InitCustomDialog("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");
      customDialog_15.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_15.ShowCustomDialog();
      retValueDialog = customDialog_15.GetCustomDialogProperty( "ReturnValue" );
      AswStatusDialog::AppendText(Translate("   Loading the carrier on Track 35"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Load Carrier"));
      if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      AswStatusDialog::AppendText(strProcessMsgCompleted);
    }
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Completed\n"));
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  Process02_AdapterLigation ********************"));
}

private function Process03_CleanUp_1(  ) void {
  private variable strProcessMsgStart;
  private dialog customDialog_18;
  private variable strProcessMsgCompleted;
  private variable retValueDialog;
  private variable strMIDIPlateBarcode;
  private variable strHSPPlateBarcode;
  private variable strLiquidClassName_CleanUp_Samples;
  private variable strLiquidClassName_CleanUp_Ethanol;
  private variable strLiquidClassName_CleanUp_Beads;
  private variable strLiquidClassName_CleanUp_Supernatant;
  private variable strLiquidClassName_CleanUp_ElutionBuffer;
  private variable strLiquidClassName_CleanUp_Beads_Mixing;
  private variable strLiquidClassName_CleanUp_EthanolToWaste;
  private variable strBatchInformation;
  private variable strVolume_CleanUp1_Eluate;
  private variable strLiquidClassName_CleanUp_Eluate;
  private variable strLiquidClassName_CleanUp_Ethanol2ndAspirationToWaste;
  MECC::TraceComment(Translate("**********************************************************************************************************************************************\n******************** SUBMETHOD START: Process03_CleanUp_1 ************\n**********************************************************************************************************************************************"));
  strProcessMsgStart = StrConcat4(_arrStrProcessIDs.ElementAt( 3 -1), Translate(" >>> START"), Translate(""), Translate(""));
  strProcessMsgCompleted = StrConcat4(_arrStrProcessIDs.ElementAt( 3 -1), Translate(" >>> COMPLETED"), Translate(""), Translate(""));
  strLiquidClassName_CleanUp_Beads = Translate("NEBNext_EMSeq_300F_CleanUp_SPB_SurfaceEmpty");
  strLiquidClassName_CleanUp_Beads_Mixing = Translate("NEBNext_EMseq_1000F_CleanUp_SPBMixing_SurfaceEmpty");
  if (_fltVolume_CleanUp1_ElutionBuffer > 50)
  {
    strLiquidClassName_CleanUp_ElutionBuffer = Translate("NEBNext_EMseq_300F_CleanUp_ElutionBuffer_SurfaceEmpty");
  }
  else
  {
    strLiquidClassName_CleanUp_ElutionBuffer = Translate("NEBNext_EMseq_50F_CleanUp_ElutionBuffer_SurfaceEmpty");
  }
  strLiquidClassName_CleanUp_Samples = Translate("NEBNext_EMseq_300F_CleanUp_SampleTransfer_SurfaceEmpty");
  strLiquidClassName_CleanUp_Ethanol = Translate("NEBNext_EMseq_1000F_CleanUp_Ethanol80_JetPart");
  strLiquidClassName_CleanUp_Supernatant = Translate("NEBNext_EMseq_300F_CleanUp_SupernatantToWaste_JetEmpty");
  strLiquidClassName_CleanUp_EthanolToWaste = Translate("NEBNext_EMseq_300F_CleanUp_EthanolToWaste_JetEmpty");
  strLiquidClassName_CleanUp_Eluate = Translate("NEBNext_EMseq_50F_Eluate_SurfaceEmpty");
  strLiquidClassName_CleanUp_Ethanol2ndAspirationToWaste = Translate("NEBNext_EMseq_300F_CleanUp_EthanolToWaste2ndAspiration_JetEmpty");
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(_strStatusDialogTitle_KitName);
  AswStatusDialog::SetStatusText(strProcessMsgStart);
  REFORMATSTRING::ExtractNumberOfTipsFromString(_arrIntNumberOfTipsPerProcess.ElementAt( 3 -1), _intRequiredNumberOf50uLTipsM3, _intRequiredNumberOf300uLTipsM3, _intRequiredNumberOf300uLTipsMPHM3, _intRequiredNumberOf1000uLTipsM3);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, _intRequiredNumberOf50uLTipsM3, _intRequiredNumberOf300uLTipsM3, _intRequiredNumberOf300uLTipsMPHM3, _intRequiredNumberOf1000uLTipsM3, 5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  _intIndexMIDIFromStack = _intIndexMIDIFromStack + 1;
  _intIndexHSPFromStack = _intIndexHSPFromStack + 1;
  AswStatusDialog::AppendText(Translate("   Moving new MIDI to deck"));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, _arrSeqStackMIDI.ElementAt( _intIndexMIDIFromStack -1), ML_STAR.HHS3_MIDI, 0, 1, strMIDIPlateBarcode, ASWGLOBAL::BOOL::TRUE);
  SeqIncrement(_seqStackMIDIPlates, 1);
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    AswStatusDialog::AppendText(Translate("   Transferring samples to MIDI"));
    NGSSTARPROCESSES::PIP_Liquid_SingleDispenseFromPlateToPlate(ML_STAR, _seqAspirate_CleanUp1_Samples, _seqDispense_CleanUp1_Samples, _fltVolume_CleanUp1_Sample_OverAspiration, strLiquidClassName_CleanUp_Samples, 0, 0, 0.5, 0.5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPROCESSES::Process_CleanUp(ML_STAR, _seqAspirate_CleanUp1_Beads, _seqAspirate_CleanUp1_Beads, _seqDispense_CleanUp1_Beads, _seqAspirate_CleanUp1_EtOH, _seqMagnet_CleanUp1_stand, ML_STAR.LiquidWaste, _seqAspirate_CleanUp1_ElutionBuffer, _fltVolume_CleanUp1_Beads, _fltVolume_CleanUp1_Ethanol, _fltVolume_CleanUp1_ElutionBuffer, _fltVolume_CleanUp1_SupernatantToWaste, strLiquidClassName_CleanUp_Beads, strLiquidClassName_CleanUp_Beads_Mixing, strLiquidClassName_CleanUp_Ethanol, strLiquidClassName_CleanUp_ElutionBuffer, strLiquidClassName_CleanUp_Supernatant, strLiquidClassName_CleanUp_EthanolToWaste, strLiquidClassName_CleanUp_Ethanol2ndAspirationToWaste, 1800, 1800, 120, 180, 12, _HHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::FALSE, 300, 420, 300, 480, 300, ASWGLOBAL::BOOL::TRUE);
  }
  AswStatusDialog::AppendText(Translate("   Moving HSP to waste"));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_Waste, 0, 0, strHSPPlateBarcode, ASWGLOBAL::BOOL::TRUE);
  AswStatusDialog::AppendText(Translate("   Moving new HSP to deck"));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, _arrSeqStackHSP.ElementAt( _intIndexHSPFromStack -1), ML_STAR.HSP_Pipette, 0, 1, strHSPPlateBarcode, ASWGLOBAL::BOOL::TRUE);
  SeqIncrement(_seqStackHSPPlates, 1);
  REFORMATSTRING::ReformatStringFloatDecimalPoints(_fltVolume_CleanUp1_Eluate, strVolume_CleanUp1_Eluate);
  strBatchInformation = StrConcat4(Translate("   Transferring "), strVolume_CleanUp1_Eluate, Translate(" ul of eluate"), Translate(""));
  AswStatusDialog::AppendText(strBatchInformation);
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_Liquid_SingleDispenseFromPlateToPlate(ML_STAR, _seqAspirate_CleanUp1_Eluate, _seqDispense_CleanUp1_Eluate, _fltVolume_CleanUp1_Eluate, strLiquidClassName_CleanUp_Eluate, 0, 0, 0.6, 0.6, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  AswStatusDialog::AppendText(Translate("   Moving MIDI to waste"));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 1, strMIDIPlateBarcode, ASWGLOBAL::BOOL::TRUE);
  if (_intSelectedIndexSTOP == 3)
  {
    MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
    if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    HSLStatusWindow::AppendStatusText(strProcessMsgCompleted);
    customDialog_18.InitCustomDialog("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");
    customDialog_18.SetCustomDialogProperty( "Title", _strKitName );
    customDialog_18.SetCustomDialogProperty( "textBlock2.Text", strProcessMsgCompleted );
    customDialog_18.ShowCustomDialog();
    retValueDialog = customDialog_18.GetCustomDialogProperty( "ReturnValue" );
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  Process03_CleanUp_1 ********************"));
}

private function Process04_5mC5hmC_Oxidation(  ) void {
  private sequence seqPlaceComfortLid;
  private sequence seqGetComfortLid;
  private variable strProcessMsgCompleted;
  private variable strReadCurrentBarcode;
  private variable retValueDialog;
  private variable strProcessMsgStart;
  private variable strLiquidClassName_Oxidation_StopReagent;
  private variable strLiquidClassName_Oxidation_MasterMix;
  private sequence seqGetPlate;
  private sequence seqPlacePlate;
  private dialog customDialog_19;
  private dialog customDialog_20;
  private dialog customDialog_21;
  private dialog customDialog_22;
  private dialog customDialog_23;
  private dialog customDialog_24;
  private dialog customDialog_25;
  private dialog customDialog_26;
  private dialog customDialog_27;
  private dialog customDialog_28;
  private variable strBatchInformation;
  private variable strVolume_Oxidation_MasterMix;
  private variable strVolume_Oxidation_StopReagent;
  private variable strLiquidClassName_Oxidation_Fe;
  private variable strVolume_Oxidation_Fe;
  MECC::TraceComment(Translate("**********************************************************************************************************************************************\n******************** SUBMETHOD START: Process04_5mC5hmC_Oxidation ************\n**********************************************************************************************************************************************"));
  strProcessMsgStart = StrConcat4(_arrStrProcessIDs.ElementAt( 4 -1), Translate(" >>> START"), Translate(""), Translate(""));
  strProcessMsgCompleted = StrConcat4(_arrStrProcessIDs.ElementAt( 4 -1), Translate(" >>> COMPLETED"), Translate(""), Translate(""));
  strLiquidClassName_Oxidation_MasterMix = Translate("NEBNext_EMseq_50F_Oxidation_MasterMix_SurfaceEmpty");
  strLiquidClassName_Oxidation_Fe = Translate("NEBNext_EMseq_50F_Oxidation_Fe_SurfaceEmpty");
  strLiquidClassName_Oxidation_StopReagent = Translate("NEBNext_EMseq_50F_Oxidation_StopReagent_SurfaceEmpty");
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(_strStatusDialogTitle_KitName);
  AswStatusDialog::SetStatusText(strProcessMsgStart);
  REFORMATSTRING::ExtractNumberOfTipsFromString(_arrIntNumberOfTipsPerProcess.ElementAt( 4 -1), _intRequiredNumberOf50uLTipsM4, _intRequiredNumberOf300uLTipsM4, _intRequiredNumberOf300uLTipsMPHM4, _intRequiredNumberOf1000uLTipsM4);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, _intRequiredNumberOf50uLTipsM4, _intRequiredNumberOf300uLTipsM4, _intRequiredNumberOf300uLTipsMPHM4, _intRequiredNumberOf1000uLTipsM4, 5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if (_blnIsODTCInstalled == ASWGLOBAL::BOOL::TRUE)
  {
    if (_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
      {
        if (_blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
        {
        }
        else
        {
          NGSSTARPREP::ODTC_WaitForLidAndBlockCorrectTemperature(_intDeviceNumberODTC, 37, 70);
        }
      }
    }
  }
  REFORMATSTRING::ReformatStringFloatDecimalPoints(_fltVolume_Oxidation_MasterMix, strVolume_Oxidation_MasterMix);
  strBatchInformation = StrConcat4(Translate("   Adding "), strVolume_Oxidation_MasterMix, Translate(" ul of Oxidation Master Mix"), Translate(""));
  AswStatusDialog::AppendText(strBatchInformation);
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, _seqAspirate_Oxidation_MasterMix, _seqDispense_Oxidation_MasterMix, _fltVolume_Oxidation_MasterMix, strLiquidClassName_Oxidation_MasterMix, ASWGLOBAL::BOOL::TRUE, 0, 0, 0, 0, ASWGLOBAL::BOOL::TRUE);
  }
  REFORMATSTRING::ReformatStringFloatDecimalPoints(_fltVolume_Oxidation_Fe, strVolume_Oxidation_Fe);
  strBatchInformation = StrConcat4(Translate("   Adding "), strVolume_Oxidation_Fe, Translate(" ul of FE(II) 400ตM pre-diluted"), Translate(""));
  AswStatusDialog::AppendText(strBatchInformation);
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, _seqAspirate_Oxidation_Fe, _seqDispense_Oxidation_MasterMix, _fltVolume_Oxidation_Fe, strLiquidClassName_Oxidation_Fe, ASWGLOBAL::BOOL::TRUE, 3, _fltVolume_Oxidation_Mixing, 0, 0, ASWGLOBAL::BOOL::TRUE);
  }
  if (_blnIsODTCInstalled == ASWGLOBAL::BOOL::TRUE)
  {
    if (_blnODTCused == 1)
    {
      SeqCopySequence(seqGetPlate, ML_STAR.HSP_Pipette);
      SeqCopySequence(seqPlacePlate, ML_STAR.HSP_ODTC);
      SeqCopySequence(seqGetComfortLid, ML_STAR.Ham_ComfortLid_Stack_ParkPos);
      SeqCopySequence(seqPlaceComfortLid, ML_STAR.Ham_ComfortLid_ODTC);
      _strODTCProtocolName = Translate("P4_Oxidation1");
      TrcTrace(Translate(">>>>>>>>>> Process4: _strODTCProtocolName: "), _strODTCProtocolName);
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation in ODTC - Start\n"));
      AswStatusDialog::AppendText(Translate("   Moving plate to ODTC for 5mC\5HmC Oxidation 1 "));
      if (_blnSimulationMode == ASWGLOBAL::BOOL::FALSE)
      {
        if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(_intDeviceNumberODTC, intTimeForProtocol, intRequestIDForActiveProtocol);
        }
        NGSSTARPREP::ODTC_OpenDoor(_intDeviceNumberODTC);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Plate to ODTC"));
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, seqGetPlate, seqPlacePlate, 0, 0, strReadCurrentBarcode, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Comfort Lid to ODTC"));
        NGSSTARPROCESSES::Trp_HamiltonComfortLidWithiSWAP(ML_STAR, seqGetComfortLid, seqPlaceComfortLid, 1, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Execute protocol in ODTC"));
        NGSSTARPREP::ODTC_CloseDoor(_intDeviceNumberODTC);
        if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPREP::ODTC_ExecuteProtocol(_intDeviceNumberODTC, _strODTCScriptPath, _strODTCProtocolName, intTimeForProtocol, intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(_intDeviceNumberODTC, intTimeForProtocol, intRequestIDForActiveProtocol);
        }
        NGSSTARPREP::ODTC_OpenDoor(_intDeviceNumberODTC);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Comfort Lid from ODTC"));
        NGSSTARPROCESSES::Trp_HamiltonComfortLidWithiSWAP(ML_STAR, seqPlaceComfortLid, seqGetComfortLid, 0, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Plate from ODTC"));
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, seqPlacePlate, seqGetPlate, 0, 1, strReadCurrentBarcode, ASWGLOBAL::BOOL::TRUE);
      }
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation in ODTC - Completed\n"));
    }
    else
    {
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Start\n"));
      AswStatusDialog::AppendText(Translate("   Unloading HSP plate for off-deck 5mC\5HmC Oxidation 1"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
      if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      customDialog_26.InitCustomDialog("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");
      customDialog_26.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_26.ShowCustomDialog();
      retValueDialog = customDialog_26.GetCustomDialogProperty( "ReturnValue" );
      AswStatusDialog::AppendText(Translate("   Off-deck 5mC\5HmC Oxidation 1 complete"));
      customDialog_25.InitCustomDialog("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");
      customDialog_25.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_25.ShowCustomDialog();
      retValueDialog = customDialog_25.GetCustomDialogProperty( "ReturnValue" );
      AswStatusDialog::AppendText(Translate("   Loading the carrier on Track 35"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Load Carrier"));
      if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Completed\n"));
    }
  }
  else
  {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Start\n"));
    AswStatusDialog::AppendText(Translate("   Unloading HSP plate for off-deck 5mC\5HmC Oxidation 1"));
    MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
    if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    customDialog_21.InitCustomDialog("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");
    customDialog_21.SetCustomDialogProperty( "Title", _strKitName );
    customDialog_21.ShowCustomDialog();
    retValueDialog = customDialog_21.GetCustomDialogProperty( "ReturnValue" );
    AswStatusDialog::AppendText(Translate("   Off-deck 5mC\5HmC Oxidation incubation 1 complete"));
    customDialog_27.InitCustomDialog("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");
    customDialog_27.SetCustomDialogProperty( "Title", _strKitName );
    customDialog_27.ShowCustomDialog();
    retValueDialog = customDialog_27.GetCustomDialogProperty( "ReturnValue" );
    AswStatusDialog::AppendText(Translate("   Loading the carrier on Track 35"));
    MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Load Carrier"));
    if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Completed\n"));
  }
  if (_blnIsODTCInstalled == ASWGLOBAL::BOOL::TRUE)
  {
    if (_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
      {
        if (_blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
        {
        }
        else
        {
          NGSSTARPREP::ODTC_WaitForLidAndBlockCorrectTemperature(_intDeviceNumberODTC, 37, 70);
        }
      }
    }
  }
  REFORMATSTRING::ReformatStringFloatDecimalPoints(_fltVolume_Oxidation_StopReagent, strVolume_Oxidation_StopReagent);
  strBatchInformation = StrConcat4(Translate("   Adding "), strVolume_Oxidation_StopReagent, Translate(" ul of Stop Reagent"), Translate(""));
  AswStatusDialog::AppendText(strBatchInformation);
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, _seqAspirate_Oxidation_StopReagent, _seqDispense_Oxidation_StopReagent, _fltVolume_Oxidation_StopReagent, strLiquidClassName_Oxidation_StopReagent, ASWGLOBAL::BOOL::TRUE, 3, _fltVolume_Oxidation_Mixing, 0, 0, ASWGLOBAL::BOOL::TRUE);
  }
  if (_blnIsODTCInstalled == ASWGLOBAL::BOOL::TRUE)
  {
    if (_blnODTCused == 1)
    {
      SeqCopySequence(seqGetPlate, ML_STAR.HSP_Pipette);
      SeqCopySequence(seqPlacePlate, ML_STAR.HSP_ODTC);
      SeqCopySequence(seqGetComfortLid, ML_STAR.Ham_ComfortLid_Stack_ParkPos);
      SeqCopySequence(seqPlaceComfortLid, ML_STAR.Ham_ComfortLid_ODTC);
      _strODTCProtocolName = Translate("P4_Oxidation2");
      TrcTrace(Translate(">>>>>>>>>> Process4: _strODTCProtocolName: "), _strODTCProtocolName);
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation in ODTC - Start\n"));
      AswStatusDialog::AppendText(Translate("   Moving plate to ODTC for 5mC\5HmC Oxidation 2"));
      if (_blnSimulationMode == ASWGLOBAL::BOOL::FALSE)
      {
        if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(_intDeviceNumberODTC, intTimeForProtocol, intRequestIDForActiveProtocol);
        }
        NGSSTARPREP::ODTC_OpenDoor(_intDeviceNumberODTC);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Plate to ODTC"));
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, seqGetPlate, seqPlacePlate, 0, 0, strReadCurrentBarcode, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Comfort Lid to ODTC"));
        NGSSTARPROCESSES::Trp_HamiltonComfortLidWithiSWAP(ML_STAR, seqGetComfortLid, seqPlaceComfortLid, 1, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Execute protocol in ODTC"));
        NGSSTARPREP::ODTC_CloseDoor(_intDeviceNumberODTC);
        if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPREP::ODTC_ExecuteProtocol(_intDeviceNumberODTC, _strODTCScriptPath, _strODTCProtocolName, intTimeForProtocol, intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(_intDeviceNumberODTC, intTimeForProtocol, intRequestIDForActiveProtocol);
        }
        NGSSTARPREP::ODTC_OpenDoor(_intDeviceNumberODTC);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Comfort Lid from ODTC"));
        NGSSTARPROCESSES::Trp_HamiltonComfortLidWithiSWAP(ML_STAR, seqPlaceComfortLid, seqGetComfortLid, 0, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Plate from ODTC"));
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, seqPlacePlate, seqGetPlate, 0, 1, strReadCurrentBarcode, ASWGLOBAL::BOOL::TRUE);
      }
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation in ODTC - Completed\n"));
    }
    else
    {
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Start\n"));
      AswStatusDialog::AppendText(Translate("   Unloading HSP plate for off-deck 5mC\5HmC Oxidation 2"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
      if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      customDialog_28.InitCustomDialog("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");
      customDialog_28.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_28.ShowCustomDialog();
      retValueDialog = customDialog_28.GetCustomDialogProperty( "ReturnValue" );
      if (_intSelectedIndexSTOP == 4)
      {
        AswStatusDialog::AppendText(strProcessMsgCompleted);
        customDialog_19.InitCustomDialog("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");
        customDialog_19.SetCustomDialogProperty( "Title", _strKitName );
        customDialog_19.SetCustomDialogProperty( "textBlock2.Text", strProcessMsgCompleted );
        customDialog_19.ShowCustomDialog();
        retValueDialog = customDialog_19.GetCustomDialogProperty( "ReturnValue" );
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      }
      else
      {
        AswStatusDialog::AppendText(Translate("   Off-deck 5mC\5HmC Oxidation 2 complete"));
        customDialog_20.InitCustomDialog("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");
        customDialog_20.SetCustomDialogProperty( "Title", _strKitName );
        customDialog_20.ShowCustomDialog();
        retValueDialog = customDialog_20.GetCustomDialogProperty( "ReturnValue" );
        AswStatusDialog::AppendText(Translate("   Loading the carrier on Track 35"));
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Load Carrier"));
        if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        }
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        AswStatusDialog::AppendText(strProcessMsgCompleted);
      }
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Completed\n"));
    }
  }
  else
  {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Start\n"));
    AswStatusDialog::AppendText(Translate("   Unloading HSP plate for off-deck 5mC\5HmC Oxidation 2"));
    MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
    if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    customDialog_24.InitCustomDialog("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");
    customDialog_24.SetCustomDialogProperty( "Title", _strKitName );
    customDialog_24.ShowCustomDialog();
    retValueDialog = customDialog_24.GetCustomDialogProperty( "ReturnValue" );
    if (_intSelectedIndexSTOP == 4)
    {
      AswStatusDialog::AppendText(strProcessMsgCompleted);
      customDialog_22.InitCustomDialog("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");
      customDialog_22.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_22.SetCustomDialogProperty( "textBlock2.Text", strProcessMsgCompleted );
      customDialog_22.ShowCustomDialog();
      retValueDialog = customDialog_22.GetCustomDialogProperty( "ReturnValue" );
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      HSLStatusWindow::AppendStatusText(Translate("   Off-deck  5mC\5HmC Oxidation 2 complete"));
      customDialog_23.InitCustomDialog("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");
      customDialog_23.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_23.ShowCustomDialog();
      retValueDialog = customDialog_23.GetCustomDialogProperty( "ReturnValue" );
      HSLStatusWindow::AppendStatusText(Translate("   Loading the carrier on Track 35"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Load Carrier"));
      if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      AswStatusDialog::AppendText(strProcessMsgCompleted);
    }
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Completed\n"));
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  Process04_5mC5hmC_Oxidation ********************"));
}

private function Process06_Denaturation(  ) void {
  private variable strProcessMsgCompleted;
  private variable strProcessMsgStart;
  private variable strReadCurrentBarcode;
  private sequence seqPlaceComfortLid;
  private sequence seqGetComfortLid;
  private variable retValueDialog;
  private variable strLiquidClassName_Denaturation_NaOH;
  private sequence seqGetPlate;
  private sequence seqPlacePlate;
  private dialog customDialog_29;
  private dialog customDialog_30;
  private dialog customDialog_31;
  private dialog customDialog_32;
  private dialog customDialog_33;
  private dialog customDialog_34;
  private variable strBatchInformation;
  private variable strVolume_Denaturation_NaOH;
  MECC::TraceComment(Translate("**********************************************************************************************************************************************\n******************** SUBMETHOD START: Process06_Denaturation ************\n**********************************************************************************************************************************************"));
  strProcessMsgStart = StrConcat4(_arrStrProcessIDs.ElementAt( 6 -1), Translate(" >>> START"), Translate(""), Translate(""));
  strProcessMsgCompleted = StrConcat4(_arrStrProcessIDs.ElementAt( 6 -1), Translate(" >>> COMPLETED"), Translate(""), Translate(""));
  strLiquidClassName_Denaturation_NaOH = Translate("NEBNext_EMseq_50F_Denaturation_NaOH_SurfaceEmpty");
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(_strStatusDialogTitle_KitName);
  AswStatusDialog::SetStatusText(strProcessMsgStart);
  REFORMATSTRING::ExtractNumberOfTipsFromString(_arrIntNumberOfTipsPerProcess.ElementAt( 6 -1), _intRequiredNumberOf50uLTipsM6, _intRequiredNumberOf300uLTipsM6, _intRequiredNumberOf300uLTipsMPHM6, _intRequiredNumberOf1000uLTipsM6);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, _intRequiredNumberOf50uLTipsM6, _intRequiredNumberOf300uLTipsM6, _intRequiredNumberOf300uLTipsMPHM6, _intRequiredNumberOf1000uLTipsM6, 5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if (_blnIsODTCInstalled == ASWGLOBAL::BOOL::TRUE)
  {
    if (_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
      {
        if (_blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
        {
        }
        else
        {
          NGSSTARPREP::ODTC_WaitForLidAndBlockCorrectTemperature(_intDeviceNumberODTC, 37, 70);
        }
      }
    }
  }
  REFORMATSTRING::ReformatStringFloatDecimalPoints(_fltVolume_Denaturation_NaOH, strVolume_Denaturation_NaOH);
  strBatchInformation = StrConcat4(Translate("   Adding "), strVolume_Denaturation_NaOH, Translate(" ul of NaOH 0.1 N"), Translate(""));
  AswStatusDialog::AppendText(strBatchInformation);
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, _seqAspirate_Denaturation_NaOH, _seqDispense_Denaturation_NaOH, _fltVolume_Denaturation_NaOH, strLiquidClassName_Denaturation_NaOH, ASWGLOBAL::BOOL::TRUE, 3, _fltVolume_Denaturation_Mixing, 0.5, 0, ASWGLOBAL::BOOL::TRUE);
  }
  if (_blnIsODTCInstalled == ASWGLOBAL::BOOL::TRUE)
  {
    if (_blnODTCused == 1)
    {
      SeqCopySequence(seqGetPlate, ML_STAR.HSP_Pipette);
      SeqCopySequence(seqPlacePlate, ML_STAR.HSP_ODTC);
      SeqCopySequence(seqGetComfortLid, ML_STAR.Ham_ComfortLid_Stack_ParkPos);
      SeqCopySequence(seqPlaceComfortLid, ML_STAR.Ham_ComfortLid_ODTC);
      _strODTCProtocolName = Translate("P6_DenaturationNaOH");
      TrcTrace(Translate(">>>>>>>>>> Process4: _strODTCProtocolName: "), _strODTCProtocolName);
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation in ODTC - Start\n"));
      AswStatusDialog::AppendText(Translate("   Moving plate to ODTC for Denaturation with NaOH"));
      if (_blnSimulationMode == ASWGLOBAL::BOOL::FALSE)
      {
        if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(_intDeviceNumberODTC, intTimeForProtocol, intRequestIDForActiveProtocol);
        }
        NGSSTARPREP::ODTC_OpenDoor(_intDeviceNumberODTC);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Plate to ODTC"));
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, seqGetPlate, seqPlacePlate, 0, 0, strReadCurrentBarcode, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Comfort Lid to ODTC"));
        NGSSTARPROCESSES::Trp_HamiltonComfortLidWithiSWAP(ML_STAR, seqGetComfortLid, seqPlaceComfortLid, 1, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Execute protocol in ODTC"));
        NGSSTARPREP::ODTC_CloseDoor(_intDeviceNumberODTC);
        if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPREP::ODTC_ExecuteProtocol(_intDeviceNumberODTC, _strODTCScriptPath, _strODTCProtocolName, intTimeForProtocol, intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
          if(0){
            HSLCountdownLib::ShowDialog(intTimeForProtocol, Translate("Process 06: Denaturation Incubation in ODTC. Remaining Time"), 1, 0);
          }
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(_intDeviceNumberODTC, intTimeForProtocol, intRequestIDForActiveProtocol);
        }
        NGSSTARPREP::ODTC_OpenDoor(_intDeviceNumberODTC);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Comfort Lid from ODTC"));
        NGSSTARPROCESSES::Trp_HamiltonComfortLidWithiSWAP(ML_STAR, seqPlaceComfortLid, seqGetComfortLid, 0, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Plate from ODTC"));
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, seqPlacePlate, seqGetPlate, 0, 1, strReadCurrentBarcode, ASWGLOBAL::BOOL::TRUE);
      }
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation in ODTC - Completed\n"));
    }
    else
    {
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Start\n"));
      AswStatusDialog::AppendText(Translate("   Unloading HSP plate for off-deck Denaturation"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
      if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      customDialog_33.InitCustomDialog("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");
      customDialog_33.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_33.ShowCustomDialog();
      retValueDialog = customDialog_33.GetCustomDialogProperty( "ReturnValue" );
      if (_intSelectedIndexSTOP == 6)
      {
        AswStatusDialog::AppendText(strProcessMsgCompleted);
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        customDialog_31.InitCustomDialog("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");
        customDialog_31.SetCustomDialogProperty( "Title", _strKitName );
        customDialog_31.SetCustomDialogProperty( "textBlock2.Text", strProcessMsgCompleted );
        customDialog_31.ShowCustomDialog();
        retValueDialog = customDialog_31.GetCustomDialogProperty( "ReturnValue" );
      }
      else
      {
        AswStatusDialog::AppendText(Translate("   Off-deck Denaturation incubation complete"));
        customDialog_34.InitCustomDialog("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");
        customDialog_34.SetCustomDialogProperty( "Title", _strKitName );
        customDialog_34.ShowCustomDialog();
        retValueDialog = customDialog_34.GetCustomDialogProperty( "ReturnValue" );
        AswStatusDialog::AppendText(Translate("   Loading the carrier on Track 35"));
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Load Carrier"));
        if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        }
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        AswStatusDialog::AppendText(strProcessMsgCompleted);
      }
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Completed\n"));
    }
  }
  else
  {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Start\n"));
    AswStatusDialog::AppendText(Translate("   Unloading HSP plate for off-deck Denaturation"));
    MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
    if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    customDialog_30.InitCustomDialog("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");
    customDialog_30.SetCustomDialogProperty( "Title", _strKitName );
    customDialog_30.ShowCustomDialog();
    retValueDialog = customDialog_30.GetCustomDialogProperty( "ReturnValue" );
    if (_intSelectedIndexSTOP == 6)
    {
      AswStatusDialog::AppendText(strProcessMsgCompleted);
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      customDialog_29.InitCustomDialog("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");
      customDialog_29.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_29.SetCustomDialogProperty( "textBlock2.Text", strProcessMsgCompleted );
      customDialog_29.ShowCustomDialog();
      retValueDialog = customDialog_29.GetCustomDialogProperty( "ReturnValue" );
    }
    else
    {
      AswStatusDialog::AppendText(Translate("   Off-deck Denaturation incubation complete"));
      customDialog_32.InitCustomDialog("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");
      customDialog_32.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_32.ShowCustomDialog();
      retValueDialog = customDialog_32.GetCustomDialogProperty( "ReturnValue" );
      AswStatusDialog::AppendText(Translate("   Loading the carrier on Track 35"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Load Carrier"));
      if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      AswStatusDialog::AppendText(strProcessMsgCompleted);
    }
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Completed\n"));
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  Process06_Denaturation ********************"));
}

private function Process09_PCR_Amplification(  ) void {
  private variable strProcessMsgCompleted;
  private variable strProcessMsgStart;
  private variable strLiquidClassName_PCRAmplification_Indexes;
  private variable strLiquidClassName_PCRAmplification_Q5UMastermix;
  private variable strReadCurrentBarcode;
  private sequence seqPlaceComfortLid;
  private sequence seqGetComfortLid;
  private variable retValueDialog;
  private sequence seqGetPlate;
  private sequence seqPlacePlate;
  private dialog dialogHandle_35;
  private dialog customDialog_36;
  private dialog customDialog_37;
  private dialog customDialog_38;
  private dialog customDialog_39;
  private dialog customDialog_40;
  private dialog customDialog_41;
  private variable _strODTCProtocolName2;
  private variable strBatchInformation;
  private variable strVolume_PCRAmplification_Q5UMastermix;
  private variable strVolume_PCRAmplification_Index;
  MECC::TraceComment(Translate("**********************************************************************************************************************************************\n******************** SUBMETHOD START: Process09_PCR_Amplification ************\n**********************************************************************************************************************************************"));
  strProcessMsgStart = StrConcat4(_arrStrProcessIDs.ElementAt( 9 -1), Translate(" >>> START"), Translate(""), Translate(""));
  strProcessMsgCompleted = StrConcat4(_arrStrProcessIDs.ElementAt( 9 -1), Translate(" >>> COMPLETED"), Translate(""), Translate(""));
  strLiquidClassName_PCRAmplification_Q5UMastermix = Translate("NEBNext_EMseq_50F_Q5U_MasterMix_SurfaceEmpty");
  strLiquidClassName_PCRAmplification_Indexes = Translate("NEBNext_EMseq_50F_IndexPrimer_SurfaceEmpty");
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(_strStatusDialogTitle_KitName);
  AswStatusDialog::SetStatusText(strProcessMsgStart);
  REFORMATSTRING::ExtractNumberOfTipsFromString(_arrIntNumberOfTipsPerProcess.ElementAt( 9 -1), _intRequiredNumberOf50uLTipsM9, _intRequiredNumberOf300uLTipsM9, _intRequiredNumberOf300uLTipsMPHM9, _intRequiredNumberOf1000uLTipsM9);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, _intRequiredNumberOf50uLTipsM9, _intRequiredNumberOf300uLTipsM9, _intRequiredNumberOf300uLTipsMPHM9, _intRequiredNumberOf1000uLTipsM9, 5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if (_blnIsODTCInstalled == ASWGLOBAL::BOOL::TRUE)
  {
    if (_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
      {
        if (_blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
        {
        }
        else
        {
          NGSSTARPREP::ODTC_WaitForLidAndBlockCorrectTemperature(_intDeviceNumberODTC, 60, 70);
        }
      }
    }
  }
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    REFORMATSTRING::ReformatStringFloatDecimalPoints(_fltVolume_PCRAmplification_Q5UMastermix, strVolume_PCRAmplification_Q5UMastermix);
    strBatchInformation = StrConcat4(Translate("   Adding "), strVolume_PCRAmplification_Q5UMastermix, Translate(" ul of QU5 Master Mix"), Translate(""));
    AswStatusDialog::AppendText(strBatchInformation);
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, _seqAspirate_PCRAmplification_Q5UMastermix, _seqDispense_PCRAmplification_Q5UMastermix, _fltVolume_PCRAmplification_Q5UMastermix, strLiquidClassName_PCRAmplification_Q5UMastermix, ASWGLOBAL::BOOL::TRUE, 3, _fltVolume_PCRAmplification_Q5UMastermix, 0.5, 0, ASWGLOBAL::BOOL::TRUE);
    if (_strIndexFormat == "tube")
    {
      dialogHandle_35.SetOutput(Translate("Transfer Indexes from Vials is currently disabled"));
      dialogHandle_35.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    else
    {
      REFORMATSTRING::ReformatStringFloatDecimalPoints(_fltVolume_PCRAmplification_Index, strVolume_PCRAmplification_Index);
      strBatchInformation = StrConcat4(Translate("   Adding "), strVolume_PCRAmplification_Index, Translate(" ul of Indexes"), Translate(""));
      AswStatusDialog::AppendText(strBatchInformation);
      NGSSTARPROCESSES::PIP_Liquid_SingleDispenseFromPlateToPlate(ML_STAR, _seqAspirate_PCRAmplification_Indexes1, _seqDispense_PCRAmplification_Indexes1, _fltVolume_PCRAmplification_Index, strLiquidClassName_PCRAmplification_Indexes, 3, _fltVolume_PCRAmplification_Mixing, 0.6, 0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    }
  }
  if (_blnIsODTCInstalled == ASWGLOBAL::BOOL::TRUE)
  {
    if (_blnODTCused == 1)
    {
      SeqCopySequence(seqGetPlate, ML_STAR.HSP_Pipette);
      SeqCopySequence(seqPlacePlate, ML_STAR.HSP_ODTC);
      SeqCopySequence(seqGetComfortLid, ML_STAR.Ham_ComfortLid_Stack_ParkPos);
      SeqCopySequence(seqPlaceComfortLid, ML_STAR.Ham_ComfortLid_ODTC);
      _strODTCProtocolName = Translate("P9_PrePCRAmplification");
      _strODTCProtocolName2 = Translate("P9_PCRAmplification_");
      _strODTCProtocolName2 = StrConcat2(_strODTCProtocolName2, _intPCRCycles);
      TrcTrace(Translate(">>>>>>>>>> Process9: _strODTCProtocolName2: "), _strODTCProtocolName2);
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation in ODTC - Start\n"));
      AswStatusDialog::AppendText(Translate("   Moving plate to ODTC for PCR Amplification"));
      if (_blnSimulationMode == ASWGLOBAL::BOOL::FALSE)
      {
        if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(_intDeviceNumberODTC, intTimeForProtocol, intRequestIDForActiveProtocol);
        }
        if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPREP::ODTC_ExecuteProtocol(_intDeviceNumberODTC, _strODTCScriptPath, _strODTCProtocolName, intTimeForProtocol, intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
          if(0){
            HSLCountdownLib::ShowDialog(intTimeForProtocol, Translate("Process 09: Preparing ODTC for PCR. Remaining Time"), 1, 0);
          }
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(_intDeviceNumberODTC, intTimeForProtocol, intRequestIDForActiveProtocol);
          if (_blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
          {
          }
          else
          {
            NGSSTARPREP::ODTC_WaitForLidAndBlockCorrectTemperature(_intDeviceNumberODTC, 60, 105);
          }
        }
        NGSSTARPREP::ODTC_OpenDoor(_intDeviceNumberODTC);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Plate to ODTC"));
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, seqGetPlate, seqPlacePlate, 0, 0, strReadCurrentBarcode, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Comfort Lid to ODTC"));
        NGSSTARPROCESSES::Trp_HamiltonComfortLidWithiSWAP(ML_STAR, seqGetComfortLid, seqPlaceComfortLid, 1, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Execute protocol in ODTC"));
        NGSSTARPREP::ODTC_CloseDoor(_intDeviceNumberODTC);
        if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPREP::ODTC_ExecuteProtocol(_intDeviceNumberODTC, _strODTCScriptPath, _strODTCProtocolName2, intTimeForProtocol, intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
          if(0){
            HSLCountdownLib::ShowDialog(intTimeForProtocol, Translate("Process 09: PCR Amplification. Remaining Time"), 1, 0);
          }
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(_intDeviceNumberODTC, intTimeForProtocol, intRequestIDForActiveProtocol);
        }
        NGSSTARPREP::ODTC_OpenDoor(_intDeviceNumberODTC);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Comfort Lid from ODTC"));
        NGSSTARPROCESSES::Trp_HamiltonComfortLidWithiSWAP(ML_STAR, seqPlaceComfortLid, seqGetComfortLid, 0, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Plate from ODTC"));
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, seqPlacePlate, seqGetPlate, 0, 1, strReadCurrentBarcode, ASWGLOBAL::BOOL::TRUE);
        NGSSTARPREP::ODTC_CloseDoor(_intDeviceNumberODTC);
        NGSSTARPREP::ODTC_Terminate(_intDeviceNumberODTC);
        _blnODTCTerminatedPrematurely = ASWGLOBAL::BOOL::TRUE;
      }
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation in ODTC - Completed\n"));
    }
    else
    {
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Start\n"));
      AswStatusDialog::AppendText(Translate("   Unloading HSP plate for off-deck PCR Amplification"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
      if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      customDialog_40.InitCustomDialog("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");
      customDialog_40.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_40.ShowCustomDialog();
      retValueDialog = customDialog_40.GetCustomDialogProperty( "ReturnValue" );
      if (_intSelectedIndexSTOP == 9)
      {
        AswStatusDialog::AppendText(strProcessMsgCompleted);
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        customDialog_36.InitCustomDialog("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");
        customDialog_36.SetCustomDialogProperty( "Title", _strKitName );
        customDialog_36.SetCustomDialogProperty( "textBlock2.Text", strProcessMsgCompleted );
        customDialog_36.ShowCustomDialog();
        retValueDialog = customDialog_36.GetCustomDialogProperty( "ReturnValue" );
      }
      else
      {
        AswStatusDialog::AppendText(Translate("   Off-deck PCR Amplification complete"));
        customDialog_37.InitCustomDialog("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");
        customDialog_37.SetCustomDialogProperty( "Title", _strKitName );
        customDialog_37.ShowCustomDialog();
        retValueDialog = customDialog_37.GetCustomDialogProperty( "ReturnValue" );
        AswStatusDialog::AppendText(Translate("   Loading the carrier on Track 35"));
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Load Carrier"));
        if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        }
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        AswStatusDialog::AppendText(strProcessMsgCompleted);
      }
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Completed\n"));
    }
  }
  else
  {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Start\n"));
    HSLStatusWindow::AppendStatusText(Translate("   Move HSP plate for off-deck PCR Amplification"));
    MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
    if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    customDialog_39.InitCustomDialog("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");
    customDialog_39.SetCustomDialogProperty( "Title", _strKitName );
    customDialog_39.ShowCustomDialog();
    retValueDialog = customDialog_39.GetCustomDialogProperty( "ReturnValue" );
    if (_intSelectedIndexSTOP == 9)
    {
      AswStatusDialog::AppendText(strProcessMsgCompleted);
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      customDialog_41.InitCustomDialog("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");
      customDialog_41.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_41.SetCustomDialogProperty( "textBlock2.Text", strProcessMsgCompleted );
      customDialog_41.ShowCustomDialog();
      retValueDialog = customDialog_41.GetCustomDialogProperty( "ReturnValue" );
    }
    else
    {
      AswStatusDialog::AppendText(Translate("   Off-deck PCR Amplification complete"));
      customDialog_38.InitCustomDialog("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");
      customDialog_38.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_38.ShowCustomDialog();
      retValueDialog = customDialog_38.GetCustomDialogProperty( "ReturnValue" );
      AswStatusDialog::AppendText(Translate("   Loading the carrier on Track 35"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Load Carrier"));
      if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      AswStatusDialog::AppendText(strProcessMsgCompleted);
    }
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Completed\n"));
  }
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  Process09_PCR_Amplification ********************"));
}

private function Process07_Deamination(  ) void {
  private variable strProcessMsgCompleted;
  private variable strReadCurrentBarcode;
  private sequence seqPlaceComfortLid;
  private sequence seqGetComfortLid;
  private variable retValueDialog;
  private variable strProcessMsgStart;
  private variable strLiquidClassName_Deamination_Water;
  private variable strLiquidClassName_Deamination_MasterMix;
  private sequence seqGetPlate;
  private sequence seqPlacePlate;
  private dialog customDialog_42;
  private dialog customDialog_43;
  private dialog customDialog_44;
  private dialog customDialog_45;
  private dialog customDialog_46;
  private dialog customDialog_47;
  private variable strBatchInformation;
  private variable strVolume_Deamination_Water;
  private variable strVolume_Deamination_MasterMix;
  MECC::TraceComment(Translate("**********************************************************************************************************************************************\n******************** SUBMETHOD START: Process07_Deamination ************\n**********************************************************************************************************************************************"));
  strProcessMsgStart = StrConcat4(_arrStrProcessIDs.ElementAt( 7 -1), Translate(" >>> START"), Translate(""), Translate(""));
  strProcessMsgCompleted = StrConcat4(_arrStrProcessIDs.ElementAt( 7 -1), Translate(" >>> COMPLETED"), Translate(""), Translate(""));
  strLiquidClassName_Deamination_MasterMix = Translate("NEBNext_EMseq_50F_Deamination_MasterMix_SurfaceEmpty");
  strLiquidClassName_Deamination_Water = Translate("NEBNext_EMseq_300F_Deamination_Water_SurfaceEmpty");
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(_strStatusDialogTitle_KitName);
  AswStatusDialog::SetStatusText(strProcessMsgStart);
  REFORMATSTRING::ExtractNumberOfTipsFromString(_arrIntNumberOfTipsPerProcess.ElementAt( 7 -1), _intRequiredNumberOf50uLTipsM7, _intRequiredNumberOf300uLTipsM7, _intRequiredNumberOf300uLTipsMPHM7, _intRequiredNumberOf1000uLTipsM7);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, _intRequiredNumberOf50uLTipsM7, _intRequiredNumberOf300uLTipsM7, _intRequiredNumberOf300uLTipsMPHM7, _intRequiredNumberOf1000uLTipsM7, 5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if (_blnIsODTCInstalled == ASWGLOBAL::BOOL::TRUE)
  {
    if (_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
      {
        if (_intSelectedIndexSTART == 7)
        {
          if (_blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
          {
          }
          else
          {
            NGSSTARPREP::ODTC_WaitForLidAndBlockCorrectTemperature(_intDeviceNumberODTC, 37, 70);
          }
        }
        else
        {
          if (_blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
          {
          }
          else
          {
            NGSSTARPREP::ODTC_WaitForLidAndBlockCorrectTemperature(_intDeviceNumberODTC, 10, 30);
          }
        }
      }
    }
  }
  REFORMATSTRING::ReformatStringFloatDecimalPoints(_fltVolume_Deamination_Water, strVolume_Deamination_Water);
  strBatchInformation = StrConcat4(Translate("   Adding "), strVolume_Deamination_Water, Translate(" ul of water"), Translate(""));
  AswStatusDialog::AppendText(strBatchInformation);
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, _seqAspirate_Deamination_Water, _seqDispense_Deamination_Water, _fltVolume_Deamination_Water, strLiquidClassName_Deamination_Water, ASWGLOBAL::BOOL::TRUE, 3, _fltVolume_Deamination_Water, 0, 0, ASWGLOBAL::BOOL::TRUE);
  }
  REFORMATSTRING::ReformatStringFloatDecimalPoints(_fltVolume_Deamination_MasterMix, strVolume_Deamination_MasterMix);
  strBatchInformation = StrConcat4(Translate("   Adding "), strVolume_Deamination_MasterMix, Translate(" ul of Deamination Master Mix"), Translate(""));
  AswStatusDialog::AppendText(strBatchInformation);
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, _seqAspirate_Deamination_MasterMix, _seqDispense_Deamination_MasterMix, _fltVolume_Deamination_MasterMix, strLiquidClassName_Deamination_MasterMix, ASWGLOBAL::BOOL::TRUE, 3, _fltVolume_Deamination_Mixing, 0, 0, ASWGLOBAL::BOOL::TRUE);
  }
  if (_blnIsODTCInstalled == ASWGLOBAL::BOOL::TRUE)
  {
    if (_blnODTCused == 1)
    {
      SeqCopySequence(seqGetPlate, ML_STAR.HSP_Pipette);
      SeqCopySequence(seqPlacePlate, ML_STAR.HSP_ODTC);
      SeqCopySequence(seqGetComfortLid, ML_STAR.Ham_ComfortLid_Stack_ParkPos);
      SeqCopySequence(seqPlaceComfortLid, ML_STAR.Ham_ComfortLid_ODTC);
      if (_intSelectedIndexSTART == 7)
      {
        _strODTCProtocolName = Translate("P7_Deamination");
      }
      else
      {
        _strODTCProtocolName = Translate("P7_Deamination_fromP6");
      }
      TrcTrace(Translate(">>>>>>>>>> Process7: _strODTCProtocolName: "), _strODTCProtocolName);
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation in ODTC - Start\n"));
      AswStatusDialog::AppendText(Translate("   Moving plate to ODTC for Deamination"));
      if (_blnSimulationMode == ASWGLOBAL::BOOL::FALSE)
      {
        if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(_intDeviceNumberODTC, intTimeForProtocol, intRequestIDForActiveProtocol);
        }
        NGSSTARPREP::ODTC_OpenDoor(_intDeviceNumberODTC);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Plate to ODTC"));
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, seqGetPlate, seqPlacePlate, 0, 0, strReadCurrentBarcode, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Comfort Lid to ODTC"));
        NGSSTARPROCESSES::Trp_HamiltonComfortLidWithiSWAP(ML_STAR, seqGetComfortLid, seqPlaceComfortLid, 1, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Execute protocol in ODTC"));
        NGSSTARPREP::ODTC_CloseDoor(_intDeviceNumberODTC);
        if (_blnDisableODTCIncubationCommands == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPREP::ODTC_ExecuteProtocol(_intDeviceNumberODTC, _strODTCScriptPath, _strODTCProtocolName, intTimeForProtocol, intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
          if(0){
            HSLCountdownLib::ShowDialog(intTimeForProtocol, Translate("Process 07: Deamination Incubation in ODTC. Remaining Time"), 1, 0);
          }
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(_intDeviceNumberODTC, intTimeForProtocol, intRequestIDForActiveProtocol);
        }
        NGSSTARPREP::ODTC_OpenDoor(_intDeviceNumberODTC);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Comfort Lid from ODTC"));
        NGSSTARPROCESSES::Trp_HamiltonComfortLidWithiSWAP(ML_STAR, seqPlaceComfortLid, seqGetComfortLid, 0, ASWGLOBAL::BOOL::TRUE);
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Move Plate from ODTC"));
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, seqPlacePlate, seqGetPlate, 0, 1, strReadCurrentBarcode, ASWGLOBAL::BOOL::TRUE);
      }
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation in ODTC - Completed\n"));
    }
    else
    {
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Start\n"));
      AswStatusDialog::AppendText(Translate("   Unloading HSP plate for off-deck Deamination"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
      if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      customDialog_44.InitCustomDialog("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");
      customDialog_44.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_44.ShowCustomDialog();
      retValueDialog = customDialog_44.GetCustomDialogProperty( "ReturnValue" );
      if (_intSelectedIndexSTOP == 7)
      {
        AswStatusDialog::AppendText(strProcessMsgCompleted);
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        customDialog_47.InitCustomDialog("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");
        customDialog_47.SetCustomDialogProperty( "Title", _strKitName );
        customDialog_47.SetCustomDialogProperty( "textBlock2.Text", strProcessMsgCompleted );
        customDialog_47.ShowCustomDialog();
        retValueDialog = customDialog_47.GetCustomDialogProperty( "ReturnValue" );
      }
      else
      {
        AswStatusDialog::AppendText(Translate("   Off-deck Deamination complete"));
        customDialog_42.InitCustomDialog("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");
        customDialog_42.SetCustomDialogProperty( "Title", _strKitName );
        customDialog_42.ShowCustomDialog();
        retValueDialog = customDialog_42.GetCustomDialogProperty( "ReturnValue" );
        AswStatusDialog::AppendText(Translate("   Loading the carrier on Track 35"));
        MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Load Carrier"));
        if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        }
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        AswStatusDialog::AppendText(strProcessMsgCompleted);
      }
      MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Completed\n"));
    }
  }
  else
  {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Start\n"));
    AswStatusDialog::AppendText(Translate("   Unloading HSP plate for off-deck Deamination"));
    MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
    if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    customDialog_45.InitCustomDialog("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");
    customDialog_45.SetCustomDialogProperty( "Title", _strKitName );
    customDialog_45.ShowCustomDialog();
    retValueDialog = customDialog_45.GetCustomDialogProperty( "ReturnValue" );
    if (_intSelectedIndexSTOP == 7)
    {
      AswStatusDialog::AppendText(strProcessMsgCompleted);
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      customDialog_46.InitCustomDialog("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");
      customDialog_46.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_46.SetCustomDialogProperty( "textBlock2.Text", strProcessMsgCompleted );
      customDialog_46.ShowCustomDialog();
      retValueDialog = customDialog_46.GetCustomDialogProperty( "ReturnValue" );
    }
    else
    {
      AswStatusDialog::AppendText(Translate("   Off-deck Deamination complete"));
      customDialog_43.InitCustomDialog("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");
      customDialog_43.SetCustomDialogProperty( "Title", _strKitName );
      customDialog_43.ShowCustomDialog();
      retValueDialog = customDialog_43.GetCustomDialogProperty( "ReturnValue" );
      AswStatusDialog::AppendText(Translate("   Loading the carrier on Track 35"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Load Carrier"));
      if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      AswStatusDialog::AppendText(strProcessMsgCompleted);
    }
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>  Incubation off Deck - Completed\n"));
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  Process07_Deamination ********************"));
}

private function Process05_CleanUp_2(  ) void {
  private variable strProcessMsgCompleted;
  private variable strMIDIPlateBarcode;
  private variable strHSPPlateBarcode;
  private variable strProcessMsgStart;
  private variable retValueDialog;
  private variable strLiquidClassName_CleanUp_Samples;
  private variable strLiquidClassName_CleanUp_Ethanol;
  private variable strLiquidClassName_CleanUp_Beads;
  private variable strLiquidClassName_CleanUp_Supernatant;
  private variable strLiquidClassName_CleanUp_ElutionBuffer;
  private variable strLiquidClassName_CleanUp_Beads_Mixing;
  private variable strLiquidClassName_CleanUp_EthanolToWaste;
  private dialog customDialog_48;
  private variable strBatchInformation;
  private variable strVolume_CleanUp2_Eluate;
  private variable strLiquidClassName_CleanUp_Eluate;
  private variable strLiquidClassName_CleanUp_Ethanol2ndAspirationToWaste;
  MECC::TraceComment(Translate("**********************************************************************************************************************************************\n******************** SUBMETHOD START: Process05_CleanUp_2 ************\n**********************************************************************************************************************************************"));
  strProcessMsgStart = StrConcat4(_arrStrProcessIDs.ElementAt( 5 -1), Translate(" >>> START"), Translate(""), Translate(""));
  strProcessMsgCompleted = StrConcat4(_arrStrProcessIDs.ElementAt( 5 -1), Translate(" >>> COMPLETED"), Translate(""), Translate(""));
  strLiquidClassName_CleanUp_Beads = Translate("NEBNext_EMSeq_300F_CleanUp_SPB_SurfaceEmpty");
  strLiquidClassName_CleanUp_Beads_Mixing = Translate("NEBNext_EMseq_1000F_CleanUp_SPBMixing_SurfaceEmpty");
  if (_fltVolume_CleanUp2_ElutionBuffer > 50)
  {
    strLiquidClassName_CleanUp_ElutionBuffer = Translate("NEBNext_EMseq_300F_CleanUp_ElutionBuffer_SurfaceEmpty");
  }
  else
  {
    strLiquidClassName_CleanUp_ElutionBuffer = Translate("NEBNext_EMseq_50F_CleanUp_ElutionBuffer_SurfaceEmpty");
  }
  strLiquidClassName_CleanUp_Samples = Translate("NEBNext_EMseq_300F_CleanUp_SampleTransfer_SurfaceEmpty");
  strLiquidClassName_CleanUp_Ethanol = Translate("NEBNext_EMseq_1000F_CleanUp_Ethanol80_JetPart");
  strLiquidClassName_CleanUp_Supernatant = Translate("NEBNext_EMseq_300F_CleanUp_SupernatantToWaste_JetEmpty");
  strLiquidClassName_CleanUp_EthanolToWaste = Translate("NEBNext_EMseq_300F_CleanUp_EthanolToWaste_JetEmpty");
  strLiquidClassName_CleanUp_Eluate = Translate("NEBNext_EMseq_50F_Eluate_SurfaceEmpty");
  strLiquidClassName_CleanUp_Ethanol2ndAspirationToWaste = Translate("NEBNext_EMseq_300F_CleanUp_EthanolToWaste2ndAspiration_JetEmpty");
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(_strStatusDialogTitle_KitName);
  AswStatusDialog::SetStatusText(strProcessMsgStart);
  REFORMATSTRING::ExtractNumberOfTipsFromString(_arrIntNumberOfTipsPerProcess.ElementAt( 5 -1), _intRequiredNumberOf50uLTipsM5, _intRequiredNumberOf300uLTipsM5, _intRequiredNumberOf300uLTipsMPHM5, _intRequiredNumberOf1000uLTipsM5);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, _intRequiredNumberOf50uLTipsM5, _intRequiredNumberOf300uLTipsM5, _intRequiredNumberOf300uLTipsMPHM5, _intRequiredNumberOf1000uLTipsM5, 5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  _intIndexMIDIFromStack = _intIndexMIDIFromStack + 1;
  _intIndexHSPFromStack = _intIndexHSPFromStack + 1;
  AswStatusDialog::AppendText(Translate("   Moving new MIDI to deck"));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, _arrSeqStackMIDI.ElementAt( _intIndexMIDIFromStack -1), ML_STAR.HHS3_MIDI, 0, 1, strMIDIPlateBarcode, ASWGLOBAL::BOOL::TRUE);
  SeqIncrement(_seqStackMIDIPlates, 1);
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    AswStatusDialog::AppendText(Translate("   Transferring samples to MIDI"));
    strLiquidClassName_CleanUp_Ethanol2ndAspirationToWaste = Translate("NEBNext_EMseq_300F_CleanUp_EthanolToWaste2ndAspiration_JetEmpty");
    NGSSTARPROCESSES::PIP_Liquid_SingleDispenseFromPlateToPlate(ML_STAR, _seqAspirate_CleanUp2_Samples, _seqDispense_CleanUp2_Samples, _fltVolume_CleanUp2_Sample_OverAspiration, strLiquidClassName_CleanUp_Samples, 0, 0, 0.5, 0.5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPROCESSES::Process_CleanUp(ML_STAR, _seqAspirate_CleanUp2_Beads, _seqAspirate_CleanUp2_Beads, _seqDispense_CleanUp2_Beads, _seqAspirate_CleanUp2_EtOH, _seqMagnet_CleanUp2_stand, _seqLiquidWaste, _seqAspirate_CleanUp2_ElutionBuffer, _fltVolume_CleanUp2_Beads, _fltVolume_CleanUp2_Ethanol, _fltVolume_CleanUp2_ElutionBuffer, _fltVolume_CleanUp2_SupernatantToWaste, strLiquidClassName_CleanUp_Beads, strLiquidClassName_CleanUp_Beads_Mixing, strLiquidClassName_CleanUp_Ethanol, strLiquidClassName_CleanUp_ElutionBuffer, strLiquidClassName_CleanUp_Supernatant, strLiquidClassName_CleanUp_EthanolToWaste, strLiquidClassName_CleanUp_Ethanol2ndAspirationToWaste, 1800, 1800, 120, 180, 12, _HHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::FALSE, 300, 420, 300, 480, 300, ASWGLOBAL::BOOL::TRUE);
  }
  AswStatusDialog::AppendText(Translate("   Moving HSP to waste"));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_Waste, 0, 0, strHSPPlateBarcode, ASWGLOBAL::BOOL::TRUE);
  AswStatusDialog::AppendText(Translate("   Moving new HSP to deck"));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, _arrSeqStackHSP.ElementAt( _intIndexHSPFromStack -1), ML_STAR.HSP_Pipette, 0, 1, strHSPPlateBarcode, ASWGLOBAL::BOOL::TRUE);
  SeqIncrement(_seqStackHSPPlates, 1);
  REFORMATSTRING::ReformatStringFloatDecimalPoints(_fltVolume_CleanUp2_Eluate, strVolume_CleanUp2_Eluate);
  strBatchInformation = StrConcat4(Translate("   Transferring "), strVolume_CleanUp2_Eluate, Translate(" ul of eluate"), Translate(""));
  AswStatusDialog::AppendText(strBatchInformation);
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_Liquid_SingleDispenseFromPlateToPlate(ML_STAR, _seqAspirate_CleanUp2_Eluate, _seqDispense_CleanUp2_Eluate, _fltVolume_CleanUp2_Eluate, strLiquidClassName_CleanUp_Eluate, 0, 0, 0.6, 0.6, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  AswStatusDialog::AppendText(Translate("   Moving MIDI to waste"));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 1, strMIDIPlateBarcode, ASWGLOBAL::BOOL::TRUE);
  if (_intSelectedIndexSTOP == 5)
  {
    MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
    if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    HSLStatusWindow::AppendStatusText(strProcessMsgCompleted);
    customDialog_48.InitCustomDialog("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");
    customDialog_48.SetCustomDialogProperty( "Title", _strKitName );
    customDialog_48.SetCustomDialogProperty( "textBlock2.Text", strProcessMsgCompleted );
    customDialog_48.ShowCustomDialog();
    retValueDialog = customDialog_48.GetCustomDialogProperty( "ReturnValue" );
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  Process05_CleanUp_2 ********************"));
}

private function Process08_CleanUp_3(  ) void {
  private variable strProcessMsgCompleted;
  private variable strHSPPlateBarcode;
  private variable strMIDIPlateBarcode;
  private variable strProcessMsgStart;
  private variable retValueDialog;
  private variable strLiquidClassName_CleanUp_Ethanol;
  private variable strLiquidClassName_CleanUp_Samples;
  private variable strLiquidClassName_CleanUp_Beads;
  private variable strLiquidClassName_CleanUp_Supernatant;
  private variable strLiquidClassName_CleanUp_ElutionBuffer;
  private variable strLiquidClassName_CleanUp_Beads_Mixing;
  private variable strLiquidClassName_CleanUp_EthanolToWaste;
  private dialog customDialog_49;
  private variable strBatchInformation;
  private variable strVolume_CleanUp3_Eluate;
  private variable strLiquidClassName_CleanUp_Eluate;
  private variable strLiquidClassName_CleanUp_Ethanol2ndAspirationToWaste;
  private dialog customDialog_50;
  MECC::TraceComment(Translate("**********************************************************************************************************************************************\n******************** SUBMETHOD START: Process08_CleanUp_3 ************\n**********************************************************************************************************************************************"));
  strProcessMsgStart = StrConcat4(_arrStrProcessIDs.ElementAt( 8 -1), Translate(" >>> START"), Translate(""), Translate(""));
  strProcessMsgCompleted = StrConcat4(_arrStrProcessIDs.ElementAt( 8 -1), Translate(" >>> COMPLETED"), Translate(""), Translate(""));
  strLiquidClassName_CleanUp_Beads = Translate("NEBNext_EMSeq_300F_CleanUp_SPB_SurfaceEmpty");
  strLiquidClassName_CleanUp_Beads_Mixing = Translate("NEBNext_EMseq_1000F_CleanUp_SPBMixing_SurfaceEmpty");
  if (_fltVolume_CleanUp3_ElutionBuffer > 50)
  {
    strLiquidClassName_CleanUp_ElutionBuffer = Translate("NEBNext_EMseq_300F_CleanUp_ElutionBuffer_SurfaceEmpty");
  }
  else
  {
    strLiquidClassName_CleanUp_ElutionBuffer = Translate("NEBNext_EMseq_50F_CleanUp_ElutionBuffer_SurfaceEmpty");
  }
  strLiquidClassName_CleanUp_Samples = Translate("NEBNext_EMseq_300F_CleanUp_SampleTransfer_SurfaceEmpty");
  strLiquidClassName_CleanUp_Ethanol = Translate("NEBNext_EMseq_1000F_CleanUp_Ethanol80_JetPart");
  strLiquidClassName_CleanUp_Supernatant = Translate("NEBNext_EMseq_300F_CleanUp_SupernatantToWaste_JetEmpty");
  strLiquidClassName_CleanUp_EthanolToWaste = Translate("NEBNext_EMseq_300F_CleanUp_EthanolToWaste_JetEmpty");
  strLiquidClassName_CleanUp_Eluate = Translate("NEBNext_EMseq_50F_Eluate_SurfaceEmpty");
  strLiquidClassName_CleanUp_Ethanol2ndAspirationToWaste = Translate("NEBNext_EMseq_300F_CleanUp_EthanolToWaste2ndAspiration_JetEmpty");
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(_strStatusDialogTitle_KitName);
  AswStatusDialog::SetStatusText(strProcessMsgStart);
  REFORMATSTRING::ExtractNumberOfTipsFromString(_arrIntNumberOfTipsPerProcess.ElementAt( 8 -1), _intRequiredNumberOf50uLTipsM8, _intRequiredNumberOf300uLTipsM8, _intRequiredNumberOf300uLTipsMPHM8, _intRequiredNumberOf1000uLTipsM8);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, _intRequiredNumberOf50uLTipsM8, _intRequiredNumberOf300uLTipsM8, _intRequiredNumberOf300uLTipsMPHM8, _intRequiredNumberOf1000uLTipsM8, 5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  _intIndexMIDIFromStack = _intIndexMIDIFromStack + 1;
  _intIndexHSPFromStack = _intIndexHSPFromStack + 1;
  AswStatusDialog::AppendText(Translate("   Moving new MIDI to deck"));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, _arrSeqStackMIDI.ElementAt( _intIndexMIDIFromStack -1), ML_STAR.HHS3_MIDI, 0, 1, strMIDIPlateBarcode, ASWGLOBAL::BOOL::TRUE);
  SeqIncrement(_seqStackMIDIPlates, 1);
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    AswStatusDialog::AppendText(Translate("   Transferring samples to MIDI"));
    NGSSTARPROCESSES::PIP_Liquid_SingleDispenseFromPlateToPlate(ML_STAR, _seqAspirate_CleanUp3_Samples, _seqDispense_CleanUp3_Samples, _fltVolume_CleanUp3_Sample_OverAspiration, strLiquidClassName_CleanUp_Samples, 0, 0, 0.5, 0.5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPROCESSES::Process_CleanUp(ML_STAR, _seqAspirate_CleanUp3_Beads, _seqAspirate_CleanUp3_Beads, _seqDispense_CleanUp3_Beads, _seqAspirate_CleanUp3_EtOH, _seqMagnet_CleanUp3_stand, _seqLiquidWaste, _seqAspirate_CleanUp3_ElutionBuffer, _fltVolume_CleanUp3_Beads, _fltVolume_CleanUp3_Ethanol, _fltVolume_CleanUp3_ElutionBuffer, _fltVolume_CleanUp3_SupernatantToWaste, strLiquidClassName_CleanUp_Beads, strLiquidClassName_CleanUp_Beads_Mixing, strLiquidClassName_CleanUp_Ethanol, strLiquidClassName_CleanUp_ElutionBuffer, strLiquidClassName_CleanUp_Supernatant, strLiquidClassName_CleanUp_EthanolToWaste, strLiquidClassName_CleanUp_Ethanol2ndAspirationToWaste, 1800, 1800, 120, 180, 12, _HHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::FALSE, 300, 420, 300, 480, 300, ASWGLOBAL::BOOL::TRUE);
  }
  AswStatusDialog::AppendText(Translate("   Moving HSP to waste"));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_Waste, 0, 0, strHSPPlateBarcode, ASWGLOBAL::BOOL::TRUE);
  AswStatusDialog::AppendText(Translate("   Moving new HSP to deck"));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, _arrSeqStackHSP.ElementAt( _intIndexHSPFromStack -1), ML_STAR.HSP_Pipette, 0, 1, strHSPPlateBarcode, ASWGLOBAL::BOOL::TRUE);
  SeqIncrement(_seqStackHSPPlates, 1);
  REFORMATSTRING::ReformatStringFloatDecimalPoints(_fltVolume_CleanUp3_Eluate, strVolume_CleanUp3_Eluate);
  strBatchInformation = StrConcat4(Translate("   Transferring "), strVolume_CleanUp3_Eluate, Translate(" ul of eluate"), Translate(""));
  AswStatusDialog::AppendText(strBatchInformation);
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_Liquid_SingleDispenseFromPlateToPlate(ML_STAR, _seqAspirate_CleanUp3_Eluate, _seqDispense_CleanUp3_Eluate, _fltVolume_CleanUp3_Eluate, strLiquidClassName_CleanUp_Eluate, 0, 0, 0.6, 0.6, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  AswStatusDialog::AppendText(Translate("   Moving MIDI to waste"));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 1, strMIDIPlateBarcode, ASWGLOBAL::BOOL::TRUE);
  if (_intSelectedIndexSTOP == 8)
  {
    MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
    if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    HSLStatusWindow::AppendStatusText(strProcessMsgCompleted);
    customDialog_49.InitCustomDialog("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");
    customDialog_49.SetCustomDialogProperty( "Title", _strKitName );
    customDialog_49.SetCustomDialogProperty( "textBlock2.Text", strProcessMsgCompleted );
    customDialog_49.ShowCustomDialog();
    retValueDialog = customDialog_49.GetCustomDialogProperty( "ReturnValue" );
  }
  else
  {
    MECC::TraceComment(Translate("New SG - postponed primer plate loading 25.11.2020"));
    MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
    if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    HSLStatusWindow::AppendStatusText(Translate("Postponed Primer Plate Loading activated"));
    customDialog_50.InitCustomDialog("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");
    customDialog_50.SetCustomDialogProperty( "Title", _strKitName );
    customDialog_50.ShowCustomDialog();
    retValueDialog = customDialog_50.GetCustomDialogProperty( "ReturnValue" );
    if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  Process08_CleanUp_3 ********************"));
}

private function Process10_CleanUp_4(  ) void {
  private variable strProcessMsgCompleted;
  private variable strHSPPlateBarcode;
  private variable strMIDIPlateBarcode;
  private variable strProcessMsgStart;
  private variable retValueDialog;
  private variable strLiquidClassName_CleanUp_Ethanol;
  private variable strLiquidClassName_CleanUp_Samples;
  private variable strLiquidClassName_CleanUp_Beads;
  private variable strLiquidClassName_CleanUp_Supernatant;
  private variable strLiquidClassName_CleanUp_ElutionBuffer;
  private variable strLiquidClassName_CleanUp_Beads_Mixing;
  private variable strLiquidClassName_CleanUp_EthanolToWaste;
  private dialog customDialog_51;
  private variable strBatchInformation;
  private variable strVolume_CleanUp4_Eluate;
  private variable strLiquidClassName_CleanUp_Eluate;
  private variable strLiquidClassName_CleanUp_Ethanol2ndAspirationToWaste;
  private variable strLiquidClassName_PCRAmplification_Water;
  private variable strVolume_PCRAmplification_Water;
  MECC::TraceComment(Translate("**********************************************************************************************************************************************\n******************** SUBMETHOD START: Process10_CleanUp_4 ************\n**********************************************************************************************************************************************"));
  strProcessMsgStart = StrConcat4(_arrStrProcessIDs.ElementAt( 10 -1), Translate(" >>> START"), Translate(""), Translate(""));
  strProcessMsgCompleted = StrConcat4(_arrStrProcessIDs.ElementAt( 10 -1), Translate(" >>> COMPLETED"), Translate(""), Translate(""));
  strLiquidClassName_CleanUp_Beads = Translate("NEBNext_EMSeq_300F_CleanUp_SPB_SurfaceEmpty");
  strLiquidClassName_CleanUp_Beads_Mixing = Translate("NEBNext_EMseq_1000F_CleanUp_SPBMixing_SurfaceEmpty");
  if (_fltVolume_CleanUp4_ElutionBuffer > 50)
  {
    strLiquidClassName_CleanUp_ElutionBuffer = Translate("NEBNext_EMseq_300F_CleanUp_ElutionBuffer_SurfaceEmpty");
  }
  else
  {
    strLiquidClassName_CleanUp_ElutionBuffer = Translate("NEBNext_EMseq_50F_CleanUp_ElutionBuffer_SurfaceEmpty");
  }
  strLiquidClassName_CleanUp_Samples = Translate("NEBNext_EMseq_300F_CleanUp_SampleTransfer_SurfaceEmpty");
  strLiquidClassName_CleanUp_Ethanol = Translate("NEBNext_EMseq_1000F_CleanUp_Ethanol80_JetPart");
  strLiquidClassName_CleanUp_Supernatant = Translate("NEBNext_EMseq_300F_CleanUp_SupernatantToWaste_JetEmpty");
  strLiquidClassName_CleanUp_EthanolToWaste = Translate("NEBNext_EMseq_300F_CleanUp_EthanolToWaste_JetEmpty");
  strLiquidClassName_CleanUp_Eluate = Translate("NEBNext_EMseq_50F_Eluate_SurfaceEmpty");
  strLiquidClassName_CleanUp_Ethanol2ndAspirationToWaste = Translate("NEBNext_EMseq_300F_CleanUp_EthanolToWaste2ndAspiration_JetEmpty");
  if (_fltVolume_PCRAmplification_Water <= 50)
  {
    strLiquidClassName_PCRAmplification_Water = Translate("NEBNext_EMseq_50F_CleanUp_ElutionBuffer_SurfaceEmpty");
  }
  else
  {
    strLiquidClassName_PCRAmplification_Water = Translate("NEBNext_EMseq_300F_Deamination_Water_SurfaceEmpty");
  }
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(_strStatusDialogTitle_KitName);
  AswStatusDialog::SetStatusText(strProcessMsgStart);
  REFORMATSTRING::ExtractNumberOfTipsFromString(_arrIntNumberOfTipsPerProcess.ElementAt( 10 -1), _intRequiredNumberOf50uLTipsM10, _intRequiredNumberOf300uLTipsM10, _intRequiredNumberOf300uLTipsMPHM10, _intRequiredNumberOf1000uLTipsM10);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, _intRequiredNumberOf50uLTipsM10, _intRequiredNumberOf300uLTipsM10, _intRequiredNumberOf300uLTipsMPHM10, _intRequiredNumberOf1000uLTipsM10, 5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  REFORMATSTRING::ReformatStringFloatDecimalPoints(_fltVolume_PCRAmplification_Water, strVolume_PCRAmplification_Water);
  strBatchInformation = StrConcat4(Translate("   Adding "), strVolume_PCRAmplification_Water, Translate(" ul of Water"), Translate(""));
  AswStatusDialog::AppendText(strBatchInformation);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, _seqAspirate_PCRAmplification_Water, _seqDispense_PCRAmplification_Water, _fltVolume_PCRAmplification_Water, strLiquidClassName_PCRAmplification_Water, ASWGLOBAL::BOOL::TRUE, 0, 0, 0, 0, ASWGLOBAL::BOOL::TRUE);
  _intIndexMIDIFromStack = _intIndexMIDIFromStack + 1;
  _intIndexHSPFromStack = _intIndexHSPFromStack + 1;
  AswStatusDialog::AppendText(Translate("   Moving new MIDI to deck"));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, _arrSeqStackMIDI.ElementAt( _intIndexMIDIFromStack -1), ML_STAR.HHS3_MIDI, 0, 1, strMIDIPlateBarcode, ASWGLOBAL::BOOL::TRUE);
  SeqIncrement(_seqStackMIDIPlates, 1);
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    AswStatusDialog::AppendText(Translate("   Transferring samples to MIDI"));
    NGSSTARPROCESSES::PIP_Liquid_SingleDispenseFromPlateToPlate(ML_STAR, _seqAspirate_CleanUp4_Samples, _seqDispense_CleanUp4_Samples, _fltVolume_CleanUp4_Sample_OverAspiration, strLiquidClassName_CleanUp_Samples, 0, 0, 0.5, 0.5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPROCESSES::Process_CleanUp(ML_STAR, _seqAspirate_CleanUp4_Beads, _seqAspirate_CleanUp4_Beads, _seqDispense_CleanUp4_Beads, _seqAspirate_CleanUp4_EtOH, _seqMagnet_CleanUp4_stand, _seqLiquidWaste, _seqAspirate_CleanUp4_ElutionBuffer, _fltVolume_CleanUp4_Beads, _fltVolume_CleanUp4_Ethanol, _fltVolume_CleanUp4_ElutionBuffer, _fltVolume_CleanUp4_SupernatantToWaste, strLiquidClassName_CleanUp_Beads, strLiquidClassName_CleanUp_Beads_Mixing, strLiquidClassName_CleanUp_Ethanol, strLiquidClassName_CleanUp_ElutionBuffer, strLiquidClassName_CleanUp_Supernatant, strLiquidClassName_CleanUp_EthanolToWaste, strLiquidClassName_CleanUp_Ethanol2ndAspirationToWaste, 1800, 1800, 120, 180, 12, _HHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::FALSE, 300, 420, 300, 480, 300, ASWGLOBAL::BOOL::TRUE);
  }
  AswStatusDialog::AppendText(Translate("   Moving HSP to waste"));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_Waste, 0, 0, strHSPPlateBarcode, ASWGLOBAL::BOOL::TRUE);
  AswStatusDialog::AppendText(Translate("   Moving new HSP to deck"));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, _arrSeqStackHSP.ElementAt( _intIndexHSPFromStack -1), ML_STAR.HSP_Pipette, 0, 1, strHSPPlateBarcode, ASWGLOBAL::BOOL::TRUE);
  SeqIncrement(_seqStackHSPPlates, 1);
  REFORMATSTRING::ReformatStringFloatDecimalPoints(_fltVolume_CleanUp4_Eluate, strVolume_CleanUp4_Eluate);
  strBatchInformation = StrConcat4(Translate("   Transferring "), strVolume_CleanUp4_Eluate, Translate(" ul of eluate"), Translate(""));
  AswStatusDialog::AppendText(strBatchInformation);
  if (_blnDisablePipettingCommands == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_Liquid_SingleDispenseFromPlateToPlate(ML_STAR, _seqAspirate_CleanUp4_Eluate, _seqDispense_CleanUp4_Eluate, _fltVolume_CleanUp4_Eluate, strLiquidClassName_CleanUp_Eluate, 0, 0, 0.5, 0.5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  AswStatusDialog::AppendText(Translate("   Moving MIDI to waste"));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 1, strMIDIPlateBarcode, ASWGLOBAL::BOOL::TRUE);
  if (_intSelectedIndexSTOP == 10)
  {
    MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>> Unload Carrier"));
    if (_blnDisableLoadingCarrierCommands == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    HSLStatusWindow::AppendStatusText(strProcessMsgCompleted);
    customDialog_51.InitCustomDialog("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");
    customDialog_51.SetCustomDialogProperty( "Title", _strKitName );
    customDialog_51.SetCustomDialogProperty( "textBlock2.Text", strProcessMsgCompleted );
    customDialog_51.ShowCustomDialog();
    retValueDialog = customDialog_51.GetCustomDialogProperty( "ReturnValue" );
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  Process10_CleanUp_4 ********************"));
}

private function _LoadingDialogAddRowWithData( variable i_strValue1, variable i_strValue2, variable i_strValue3 ) void {
  private variable strStringType;
  strStringType = StrGetType(i_strValue1);
  if (strStringType == "i")
  {
    i_strValue1 = StrIStr(i_strValue1);
  }
  if (strStringType == "f")
  {
    i_strValue1 = StrFStr(i_strValue1);
  }
  strStringType = StrGetType(i_strValue2);
  if (strStringType == "i")
  {
    i_strValue2 = StrIStr(i_strValue2);
  }
  if (strStringType == "f")
  {
    i_strValue2 = StrFStr(i_strValue2);
  }
  strStringType = StrGetType(i_strValue3);
  if (strStringType == "i")
  {
    i_strValue3 = StrIStr(i_strValue3);
  }
  if (strStringType == "f")
  {
    i_strValue3 = StrFStr(i_strValue3);
  }
  _arrPositions.AddAsLast(i_strValue1);
  _arrQuantities.AddAsLast(i_strValue2);
  _arrDescriptions.AddAsLast(i_strValue3);
}

private function _SequenceDefinition(  ) void {
  SeqCopySequence(_seqLiquidWaste, ML_STAR.LiquidWaste);
  SEQUENCEINARRAYTOOLS::Trace_Arr_of_Sequences(_arrSeqToAspirate);
  SeqCopySequence(_seqAspirate_EndPrep_Mastermix, _arrSeqToAspirate.ElementAt( 1 -1));
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqDispense_EndPrep_Mastermix);
  SeqCopySequence(_seqAspirate_AdapterLigation_Mix, _arrSeqToAspirate.ElementAt( 2 -1));
  SeqCopySequence(_seqAspirate_AdapterLigation_EMseqAdapter, _arrSeqToAspirate.ElementAt( 3 -1));
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqDispense_AdapterLigation_Mix);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqDispense_AdapterLigation_EMseqAdapter);
  SeqCopySequence(_seqAspirate_CleanUp1_Beads, _arrSeqToAspirate.ElementAt( 4 -1));
  SeqCopySequence(_seqAspirate_CleanUp1_EtOH, _arrSeqToAspirate.ElementAt( 5 -1));
  SeqCopySequence(_seqAspirate_CleanUp1_ElutionBuffer, _arrSeqToAspirate.ElementAt( 6 -1));
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.MIDI_OnMagnet, _arrayALPPositions, _seqMagnet_CleanUp1_stand);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqAspirate_CleanUp1_Samples);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HHS3_MIDI, _arrayALPPositions, _seqDispense_CleanUp1_Samples);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HHS3_MIDI, _arrayALPPositions, _seqDispense_CleanUp1_Beads);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.MIDI_OnMagnet, _arrayALPPositions, _seqDispense_CleanUp1_EtOH);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.MIDI_OnMagnet, _arrayALPPositions, _seqDispense_CleanUp1_ElutionBuffer);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.MIDI_OnMagnet, _arrayALPPositions, _seqAspirate_CleanUp1_Eluate);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqDispense_CleanUp1_Eluate);
  SeqCopySequence(_seqAspirate_Oxidation_MasterMix, _arrSeqToAspirate.ElementAt( 7 -1));
  SeqCopySequence(_seqAspirate_Oxidation_Fe, _arrSeqToAspirate.ElementAt( 8 -1));
  SeqCopySequence(_seqAspirate_Oxidation_StopReagent, _arrSeqToAspirate.ElementAt( 9 -1));
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqDispense_Oxidation_MasterMix);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqDispense_Oxidation_StopReagent);
  SeqCopySequence(_seqAspirate_CleanUp2_Beads, _arrSeqToAspirate.ElementAt( 4 -1));
  SeqCopySequence(_seqAspirate_CleanUp2_EtOH, _arrSeqToAspirate.ElementAt( 5 -1));
  SeqCopySequence(_seqAspirate_CleanUp2_ElutionBuffer, _arrSeqToAspirate.ElementAt( 6 -1));
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.MIDI_OnMagnet, _arrayALPPositions, _seqMagnet_CleanUp2_stand);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqAspirate_CleanUp2_Samples);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HHS3_MIDI, _arrayALPPositions, _seqDispense_CleanUp2_Samples);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HHS3_MIDI, _arrayALPPositions, _seqDispense_CleanUp2_Beads);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.MIDI_OnMagnet, _arrayALPPositions, _seqDispense_CleanUp2_EtOH);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.MIDI_OnMagnet, _arrayALPPositions, _seqDispense_CleanUp2_ElutionBuffer);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.MIDI_OnMagnet, _arrayALPPositions, _seqAspirate_CleanUp2_Eluate);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqDispense_CleanUp2_Eluate);
  SeqCopySequence(_seqAspirate_Denaturation_NaOH, _arrSeqToAspirate.ElementAt( 10 -1));
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqDispense_Denaturation_NaOH);
  SeqCopySequence(_seqAspirate_Deamination_MasterMix, _arrSeqToAspirate.ElementAt( 11 -1));
  SeqCopySequence(_seqAspirate_Deamination_Water, _arrSeqToAspirate.ElementAt( 12 -1));
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqDispense_Deamination_MasterMix);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqDispense_Deamination_Water);
  SeqCopySequence(_seqAspirate_CleanUp3_Beads, _arrSeqToAspirate.ElementAt( 4 -1));
  SeqCopySequence(_seqAspirate_CleanUp3_EtOH, _arrSeqToAspirate.ElementAt( 5 -1));
  SeqCopySequence(_seqAspirate_CleanUp3_ElutionBuffer, _arrSeqToAspirate.ElementAt( 6 -1));
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.MIDI_OnMagnet, _arrayALPPositions, _seqMagnet_CleanUp3_stand);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqAspirate_CleanUp3_Samples);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HHS3_MIDI, _arrayALPPositions, _seqDispense_CleanUp3_Samples);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HHS3_MIDI, _arrayALPPositions, _seqDispense_CleanUp3_Beads);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.MIDI_OnMagnet, _arrayALPPositions, _seqDispense_CleanUp3_EtOH);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.MIDI_OnMagnet, _arrayALPPositions, _seqDispense_CleanUp3_ElutionBuffer);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.MIDI_OnMagnet, _arrayALPPositions, _seqAspirate_CleanUp3_Eluate);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqDispense_CleanUp3_Eluate);
  SeqCopySequence(_seqAspirate_PCRAmplification_Q5UMastermix, _arrSeqToAspirate.ElementAt( 13 -1));
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqDispense_PCRAmplification_Q5UMastermix);
  if (_strIndexFormat == "tube")
  {
    SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.CAR_VIALS_32_2, _arrayIndex1Positions, _seqAspirate_PCRAmplification_Indexes1);
    SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.CAR_VIALS_32_2, _arrayIndex2Positions, _seqAspirate_PCRAmplification_Indexes2);
    SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqDispense_PCRAmplification_Indexes1);
    SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqDispense_PCRAmplification_Indexes2);
  }
  else
  {
    if (_strIndexFormat == "plate")
    {
      SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette2, _arrayIndex1Positions, _seqAspirate_PCRAmplification_Indexes1);
      SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqDispense_PCRAmplification_Indexes1);
    }
  }
  SeqCopySequence(_seqAspirate_CleanUp4_Beads, _arrSeqToAspirate.ElementAt( 4 -1));
  SeqCopySequence(_seqAspirate_CleanUp4_EtOH, _arrSeqToAspirate.ElementAt( 5 -1));
  SeqCopySequence(_seqAspirate_CleanUp4_ElutionBuffer, _arrSeqToAspirate.ElementAt( 6 -1));
  SeqCopySequence(_seqAspirate_PCRAmplification_Water, _arrSeqToAspirate.ElementAt( 12 -1));
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqDispense_PCRAmplification_Water);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.MIDI_OnMagnet, _arrayALPPositions, _seqMagnet_CleanUp4_stand);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqAspirate_CleanUp4_Samples);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HHS3_MIDI, _arrayALPPositions, _seqDispense_CleanUp4_Samples);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HHS3_MIDI, _arrayALPPositions, _seqDispense_CleanUp4_Beads);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.MIDI_OnMagnet, _arrayALPPositions, _seqDispense_CleanUp4_EtOH);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.MIDI_OnMagnet, _arrayALPPositions, _seqDispense_CleanUp4_ElutionBuffer);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.MIDI_OnMagnet, _arrayALPPositions, _seqAspirate_CleanUp4_Eluate);
  SEQUENCEINARRAYTOOLS::SequenceFromArray_LabIDFromTemplateSeq(ML_STAR.HSP_Pipette, _arrayALPPositions, _seqDispense_CleanUp4_Eluate);
}

private function _VolumeDefinition(  ) void {
  private variable _fltVolume_EndPrep_Total;
  private variable _fltVolume_Deamination_Total;
  private variable _fltVolume_Denaturation_Total;
  private variable _fltVolume_AdapterLigation_Total;
  private variable _fltVolume_Oxidation_Total;
  private variable _fltVolume_PCRAmplification_Total;
  _fltVolume_SampleInput = 50;
  _fltVolume_EndPrep_MasterMix = _arrFltVolumeReagentPerSample.ElementAt( 1 -1);
  _fltVolume_EndPrep_Total = _fltVolume_EndPrep_MasterMix + _fltVolume_SampleInput;
  _fltVolume_EndPrep_Mixing = _fltVolume_EndPrep_Total * 0.5;
  if (_fltVolume_EndPrep_Mixing > 50)
  {
    _fltVolume_AdapterLigation_Mixing = 48;
  }
  _fltVolume_AdapterLigation_Mix = _arrFltVolumeReagentPerSample.ElementAt( 2 -1);
  _fltVolume_AdapterLigation_EMseqAdapter = _arrFltVolumeReagentPerSample.ElementAt( 3 -1);
  _fltVolume_AdapterLigation_Total = _fltVolume_AdapterLigation_Mix + _fltVolume_AdapterLigation_EMseqAdapter;
  _fltVolume_AdapterLigation_Total = _fltVolume_AdapterLigation_Total + _fltVolume_EndPrep_Total;
  _fltVolume_AdapterLigation_Mixing = _fltVolume_AdapterLigation_Total * 0.5;
  if (_fltVolume_AdapterLigation_Mixing > 50)
  {
    _fltVolume_AdapterLigation_Mixing = 48;
  }
  _fltVolume_CleanUp1_Sample = 93.5;
  _fltVolume_CleanUp1_Sample_OverAspiration = 98.5;
  _fltVolume_CleanUp1_Beads = _arrFltVolumeReagentPerSample.ElementAt( 4 -1);
  _fltVolume_CleanUp1_SupernatantToWaste = _fltVolume_CleanUp1_Beads + _fltVolume_CleanUp1_Sample;
  _fltVolume_CleanUp1_Ethanol = 200;
  _fltVolume_CleanUp1_ElutionBuffer = _arrFltVolumeReagentPerSample.ElementAt( 6 -1);
  _fltVolume_CleanUp1_Eluate = 28;
  _fltVolume_Oxidation_MasterMix = _arrFltVolumeReagentPerSample.ElementAt( 7 -1);
  _fltVolume_Oxidation_Fe = _arrFltVolumeReagentPerSample.ElementAt( 8 -1);
  _fltVolume_Oxidation_StopReagent = _arrFltVolumeReagentPerSample.ElementAt( 9 -1);
  _fltVolume_Oxidation_Total = _fltVolume_Oxidation_MasterMix + _fltVolume_CleanUp1_Eluate;
  _fltVolume_Oxidation_Mixing = _fltVolume_Oxidation_Total * 0.5;
  if (_fltVolume_Oxidation_Mixing > 50)
  {
    _fltVolume_Oxidation_Mixing = 48;
  }
  _fltVolume_CleanUp2_Sample = 51;
  _fltVolume_CleanUp2_Sample_OverAspiration = 56;
  _fltVolume_CleanUp2_Beads = _arrFltVolumeReagentPerSample.ElementAt( 10 -1);
  _fltVolume_CleanUp2_SupernatantToWaste = _fltVolume_CleanUp2_Beads + _fltVolume_CleanUp2_Sample;
  _fltVolume_CleanUp2_Ethanol = 200;
  _fltVolume_CleanUp2_ElutionBuffer = _arrFltVolumeReagentPerSample.ElementAt( 12 -1);
  _fltVolume_CleanUp2_Eluate = 16;
  _fltVolume_Denaturation_NaOH = _arrFltVolumeReagentPerSample.ElementAt( 13 -1);
  _fltVolume_Denaturation_Total = _fltVolume_Denaturation_NaOH + _fltVolume_CleanUp2_Eluate;
  _fltVolume_Denaturation_Mixing = _fltVolume_Denaturation_Total * 0.5;
  if (_fltVolume_Denaturation_Mixing > 50)
  {
    _fltVolume_Denaturation_Mixing = 48;
  }
  _fltVolume_Deamination_MasterMix = _arrFltVolumeReagentPerSample.ElementAt( 14 -1);
  _fltVolume_Deamination_Water = _arrFltVolumeReagentPerSample.ElementAt( 15 -1);
  _fltVolume_Deamination_Total = _fltVolume_Deamination_Water + _fltVolume_Deamination_MasterMix;
  _fltVolume_Deamination_Total = _fltVolume_Deamination_Total + _fltVolume_Denaturation_Total;
  _fltVolume_Deamination_Mixing = _fltVolume_Deamination_Total * 0.5;
  if (_fltVolume_Deamination_Mixing > 50)
  {
    _fltVolume_Deamination_Mixing = 48;
  }
  _fltVolume_CleanUp3_Sample = 100;
  _fltVolume_CleanUp3_Sample_OverAspiration = 105;
  _fltVolume_CleanUp3_Beads = _arrFltVolumeReagentPerSample.ElementAt( 16 -1);
  _fltVolume_CleanUp3_SupernatantToWaste = _fltVolume_CleanUp3_Beads + _fltVolume_CleanUp3_Sample;
  _fltVolume_CleanUp3_Ethanol = 200;
  _fltVolume_CleanUp3_ElutionBuffer = _arrFltVolumeReagentPerSample.ElementAt( 18 -1);
  _fltVolume_CleanUp3_Eluate = 18;
  _fltVolume_PCRAmplification_Q5UMastermix = _arrFltVolumeReagentPerSample.ElementAt( 19 -1);
  _fltVolume_PCRAmplification_Index = 5;
  _fltVolume_PCRAmplification_Total = _fltVolume_PCRAmplification_Q5UMastermix + _fltVolume_PCRAmplification_Index;
  _fltVolume_PCRAmplification_Total = _fltVolume_PCRAmplification_Total + _fltVolume_CleanUp3_Eluate;
  _fltVolume_PCRAmplification_Mixing = _fltVolume_PCRAmplification_Total * 0.5;
  if (_fltVolume_PCRAmplification_Mixing > 50)
  {
    _fltVolume_PCRAmplification_Mixing = 48;
  }
  _fltVolume_PCRAmplification_Water = _arrFltVolumeReagentPerSample.ElementAt( 20 -1);
  strSQLSentence = StrConcat12("UPDATE [Reagents$] SET [Volume per Sample] = ", t_fileNGSConfig_Volume_NucleaseFreeWaterVariable," WHERE [ProcessNumber] = 10 AND [Name] = 'Nuclease free Water'","","","","","","","","","");
  TrcTrace(Translate("strSQLSentence: "), strSQLSentence);
  fileNGSConfig.AddField("ProcessNumber", fileNGSConfig_ProcessNumber, hslInteger);
  fileNGSConfig.AddField("ProcessID", fileNGSConfig_ProcessID, hslString, 255);
  fileNGSConfig.AddField("Reagent", fileNGSConfig_Reagent, hslString, 255);
  fileNGSConfig.AddField("Name", fileNGSConfig_Name, hslString, 255);
  fileNGSConfig.AddField("Labware Type", fileNGSConfig_Labware_Type, hslString, 255);
  fileNGSConfig.AddField("Carrier", fileNGSConfig_Carrier, hslString, 255);
  fileNGSConfig.AddField("PositionID", fileNGSConfig_PositionID, hslString, 255);
  fileNGSConfig.AddField("Volume per Sample", fileNGSConfig_Volume_per_Sample, hslFloat);
  fileNGSConfig.AddField("Dead Volume Reagent", fileNGSConfig_Dead_Volume_Reagent, hslFloat);
  fileNGSConfig.AddField("Dead Volume Labware", fileNGSConfig_Dead_Volume_Labware, hslFloat);
  fileNGSConfig.AddField("Maximum Volume Labware", fileNGSConfig_Maximum_Volume_Labware, hslFloat);
  fileNGSConfig.AddField("Liquid Class Name", fileNGSConfig_Liquid_Class_Name, hslString, 255);
  if( 0 == fileNGSConfig.Open(_strConfigFileFullPath + " " + "Reagents$", hslRead, strSQLSentence) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strConfigFileFullPath, "HxMetEdCompCmd");
  }
  if( 0 != fileNGSConfig.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  fileNGSConfig.RemoveFields();
  strSQLSentence = StrConcat12("UPDATE [Resources$] SET [Tips50] = 3 , [Tips300] = 5 WHERE [Process] = 10","","","","","","","","","","","");
  TrcTrace(Translate("strSQLSentence: "), strSQLSentence);
  fileNGSConfig.AddField("Process", fileNGSConfig_Process, hslFloat);
  fileNGSConfig.AddField("Tips50", fileNGSConfig_Tips50, hslFloat);
  fileNGSConfig.AddField("Tips300", fileNGSConfig_Tips300, hslFloat);
  fileNGSConfig.AddField("Tips1000", fileNGSConfig_Tips1000, hslFloat);
  fileNGSConfig.AddField("Extra Tips 50", fileNGSConfig_Extra_Tips_50, hslFloat);
  fileNGSConfig.AddField("Extra Tips 300", fileNGSConfig_Extra_Tips_300, hslFloat);
  fileNGSConfig.AddField("Extra Tips 1000", fileNGSConfig_Extra_Tips_1000, hslFloat);
  fileNGSConfig.AddField("ComfortLids", fileNGSConfig_ComfortLids, hslFloat);
  fileNGSConfig.AddField("HSP", fileNGSConfig_HSP, hslFloat);
  fileNGSConfig.AddField("MIDI", fileNGSConfig_MIDI, hslFloat);
  if( 0 == fileNGSConfig.Open(_strConfigFileFullPath + " " + "Resources$", hslRead, strSQLSentence) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strConfigFileFullPath, "HxMetEdCompCmd");
  }
  if( 0 != fileNGSConfig.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  fileNGSConfig.RemoveFields();
  _fltVolume_CleanUp4_Sample = 50;
  _fltVolume_CleanUp4_Sample_OverAspiration = _fltVolume_CleanUp4_Sample + _fltVolume_PCRAmplification_Water;
  _fltVolume_CleanUp4_Sample_OverAspiration = _fltVolume_CleanUp4_Sample_OverAspiration + 5;
  _fltVolume_CleanUp4_Beads = _arrFltVolumeReagentPerSample.ElementAt( 21 -1);
  _fltVolume_CleanUp4_SupernatantToWaste = _fltVolume_CleanUp4_Beads + _fltVolume_CleanUp4_Sample;
  _fltVolume_CleanUp4_SupernatantToWaste = _fltVolume_CleanUp4_SupernatantToWaste + _fltVolume_PCRAmplification_Water;
  _fltVolume_CleanUp4_SupernatantToWaste = _fltVolume_CleanUp4_SupernatantToWaste + 5;
  _fltVolume_CleanUp4_Ethanol = 200;
  _fltVolume_CleanUp4_ElutionBuffer = _arrFltVolumeReagentPerSample.ElementAt( 23 -1);
  _fltVolume_CleanUp4_Eluate = 20;
}
