#pragma once
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace TOOLS_LIBRARY {
  function CalculateNumberOfTubesAndVolumePerTube( variable i_str_ReagentName, variable i_int_NumberOfSamples, variable i_flt_VolumePerSample, variable i_flt_MaximumContainerVolume, variable i_flt_DeadVolumeLabware, variable i_flt_DeadVolumeReagent, variable & o_int_NumberOfContainersNeeded, variable & o_arr_VolumesPerContainer[], variable & o_arr_DescriptionForDialog[] ) void ;
  function Reformat_Sequence( sequence & io_sequenceInput, variable i_intNumberOfPositions ) void ;
  function Reformat_ValuesForDialog( variable i_flt_valueToReformat, variable & o_str_valueFormatted ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function Reformat_Sequence( sequence & io_sequenceInput, variable i_intNumberOfPositions ) void {
    private variable l_strLabwareId;
    private variable l_intTotalPositionsInSourceSequence;
    private variable loopCounter1;
    private variable l_strPositionId;
    private sequence tempSequence;
    private variable l_intPositionCounter;
    l_intTotalPositionsInSourceSequence = SeqGetTotal(io_sequenceInput);
    l_strLabwareId = SeqGetLabwareId(io_sequenceInput);
    SeqCopySequence(tempSequence, io_sequenceInput);
    SeqRemoveAll(tempSequence);
    io_sequenceInput.SetCurrentPosition(1);
    l_intPositionCounter = 0;
    {
      for(loopCounter1 = 0; loopCounter1 < i_intNumberOfPositions;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_intPositionCounter = l_intPositionCounter + 1;
        l_strPositionId = SeqGetPositionId(io_sequenceInput);
        SeqAdd(tempSequence, l_strLabwareId, l_strPositionId);
        SeqIncrement(io_sequenceInput, 1);
        if (l_intPositionCounter == l_intTotalPositionsInSourceSequence)
        {
          io_sequenceInput.SetCurrentPosition(1);
          l_intPositionCounter = 0;
        }
      }
    }
    SeqRemoveAll(io_sequenceInput);
    SeqCopySequence(io_sequenceInput, tempSequence);
    io_sequenceInput.SetCurrentPosition(1);
  }

  function Reformat_ValuesForDialog( variable i_flt_valueToReformat, variable & o_str_valueFormatted ) void {
    private variable str_io_strValueToReformat;
    private variable l_strVariableType;
    private variable io_valueToReformat;
    private variable intStrFindResult;
    o_str_valueFormatted = 0;
    l_strVariableType = StrGetType(i_flt_valueToReformat);
    if (l_strVariableType != "s")
    {
      if (l_strVariableType == "i")
      {
        io_valueToReformat = StrIStr(i_flt_valueToReformat);
      }
      if (l_strVariableType == "f")
      {
        str_io_strValueToReformat = StrConcat2(Translate(""), i_flt_valueToReformat);
        intStrFindResult = StrFind(str_io_strValueToReformat, Translate("."));
        if (intStrFindResult != -1)
        {
          intStrFindResult = intStrFindResult + 2;
          o_str_valueFormatted = StrLeft(str_io_strValueToReformat, intStrFindResult);
        }
        else
        {
          o_str_valueFormatted = str_io_strValueToReformat;
        }
      }
    }
  }

  function CalculateNumberOfTubesAndVolumePerTube( variable i_str_ReagentName, variable i_int_NumberOfSamples, variable i_flt_VolumePerSample, variable i_flt_MaximumContainerVolume, variable i_flt_DeadVolumeLabware, variable i_flt_DeadVolumeReagent, variable & o_int_NumberOfContainersNeeded, variable & o_arr_VolumesPerContainer[], variable & o_arr_DescriptionForDialog[] ) void {
    private variable l_flt_TotalVolumeNeeded;
    private variable l_int_NumberOfContainersNeeded;
    private variable l_MaximumContainerVolumeExcludingDeadVolume;
    private variable l_int_MaximumNumberSamplesPerContainer;
    private variable l_flt_VolumePerSampleIncludingDeadVolume;
    private variable l_int_NumberOfContainers;
    private variable l_int_NumberOfSamplesPerContainer;
    private variable l_int_RemainingNumberOfSamples;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable l_int_NumberOfSamplesPerContainerPlusExtraSample;
    private variable l_int_RemainingNumberOfContainers;
    private variable l_flt_TotalVolumePerContainer;
    private variable l_arr_VolumePerContainer[];
    private dialog dialogHandle1;
    private dialog dialogHandle_1;
    private dialog dialogHandle_2;
    private dialog dialogHandle_3;
    private variable l_str_Description;
    private variable l_str_UnitsVolume;
    private variable l_str_TotalVolumePerContainer;
    private variable l_arr_DescriptionForDialog[];
    private variable l_str_Description1;
    private variable l_str_Description2;
    private variable l_flt_TotalVolumePerContainerML;
    o_int_NumberOfContainersNeeded = 0;
    o_arr_VolumesPerContainer.SetSize( 0);
    o_arr_DescriptionForDialog.SetSize( 0);
    TrcTrace(Translate(" ----------------------- Input Parameters: "), i_str_ReagentName);
    TrcTrace(Translate("-------------- i_flt_DeadVolumeLabware: "), i_flt_DeadVolumeLabware);
    TrcTrace(Translate("-------------- i_flt_DeadVolumeReagent: "), i_flt_DeadVolumeReagent);
    TrcTrace(Translate("-------------- i_flt_MaximumContainerVolume: "), i_flt_MaximumContainerVolume);
    TrcTrace(Translate("-------------- i_flt_VolumePerSample: "), i_flt_VolumePerSample);
    TrcTrace(Translate("-------------- i_int_NumberOfSamples: "), i_int_NumberOfSamples);
    TrcTrace(Translate(" ----------- Calculations -----------"), Translate(""));
    i_flt_DeadVolumeReagent = 1 + i_flt_DeadVolumeReagent;
    l_flt_TotalVolumeNeeded = i_int_NumberOfSamples * i_flt_VolumePerSample;
    l_flt_TotalVolumeNeeded = l_flt_TotalVolumeNeeded * i_flt_DeadVolumeReagent;
    TrcTrace(Translate("-------------- l_flt_TotalVolumeNeeded: "), l_flt_TotalVolumeNeeded);
    l_MaximumContainerVolumeExcludingDeadVolume = i_flt_MaximumContainerVolume - i_flt_DeadVolumeLabware;
    l_int_NumberOfContainersNeeded = l_flt_TotalVolumeNeeded / (l_MaximumContainerVolumeExcludingDeadVolume * 1.0);
    l_int_NumberOfContainersNeeded = MthCeiling(l_int_NumberOfContainersNeeded);
    l_int_NumberOfContainersNeeded = l_flt_TotalVolumeNeeded / (l_MaximumContainerVolumeExcludingDeadVolume * 1.0);
    l_flt_VolumePerSampleIncludingDeadVolume = i_flt_VolumePerSample * i_flt_DeadVolumeReagent;
    l_int_MaximumNumberSamplesPerContainer = l_MaximumContainerVolumeExcludingDeadVolume / (l_flt_VolumePerSampleIncludingDeadVolume * 1.0);
    l_int_MaximumNumberSamplesPerContainer = MthFloor(l_int_MaximumNumberSamplesPerContainer);
    TrcTrace(Translate("-------------- l_int_MaximumNumberSamplesPerContainer: "), l_int_MaximumNumberSamplesPerContainer);
    l_int_NumberOfContainersNeeded = i_int_NumberOfSamples / (l_int_MaximumNumberSamplesPerContainer * 1.0);
    l_int_NumberOfContainersNeeded = MthCeiling(l_int_NumberOfContainersNeeded);
    TrcTrace(Translate("-------------- Recalculation = l_int_NumberOfContainersNeeded: "), l_int_NumberOfContainersNeeded);
    l_str_Description = Translate("");
    l_str_Description = StrConcat12(Translate("   "), i_str_ReagentName, Translate(" "), Translate("\t\t"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    l_flt_TotalVolumePerContainer = 0.0;
    l_arr_VolumePerContainer.SetSize(0);
    l_arr_DescriptionForDialog.SetSize(0);
    l_int_NumberOfSamplesPerContainer = i_int_NumberOfSamples / (l_int_NumberOfContainersNeeded * 1.0);
    l_int_NumberOfSamplesPerContainer = MthFloor(l_int_NumberOfSamplesPerContainer);
    l_int_RemainingNumberOfSamples = i_int_NumberOfSamples % l_int_NumberOfContainersNeeded;
    if (l_int_RemainingNumberOfSamples != 0)
    {
      l_int_NumberOfSamplesPerContainerPlusExtraSample = l_int_NumberOfSamplesPerContainer + 1;
      l_flt_TotalVolumePerContainer = ((l_int_NumberOfSamplesPerContainerPlusExtraSample * i_flt_VolumePerSample)* i_flt_DeadVolumeReagent) + i_flt_DeadVolumeLabware;
      l_flt_TotalVolumePerContainer = MthRound(l_flt_TotalVolumePerContainer, 1);
      l_int_RemainingNumberOfContainers = l_int_NumberOfContainersNeeded;
      {
        for(loopCounter2 = 0; loopCounter2 < l_int_RemainingNumberOfSamples;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (l_flt_TotalVolumePerContainer > 3000)
          {
            l_str_UnitsVolume = Translate("mL");
            l_flt_TotalVolumePerContainerML = l_flt_TotalVolumePerContainer / (1000 * 1.0);
            Reformat_ValuesForDialog(l_flt_TotalVolumePerContainerML, l_str_TotalVolumePerContainer);
          }
          else
          {
            l_str_TotalVolumePerContainer = l_flt_TotalVolumePerContainer;
            l_str_UnitsVolume = Translate("µL");
          }
          l_str_Description1 = StrConcat12(l_str_Description, l_str_TotalVolumePerContainer, Translate("  "), l_str_UnitsVolume, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          l_arr_DescriptionForDialog.AddAsLast(l_str_Description1);
          l_arr_VolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
          l_int_RemainingNumberOfContainers = l_int_RemainingNumberOfContainers - 1;
        }
      }
      l_flt_TotalVolumePerContainer = ((l_int_NumberOfSamplesPerContainer * i_flt_VolumePerSample)* i_flt_DeadVolumeReagent) + i_flt_DeadVolumeLabware;
      l_flt_TotalVolumePerContainer = MthRound(l_flt_TotalVolumePerContainer, 1);
      {
        for(loopCounter1 = 0; loopCounter1 < l_int_RemainingNumberOfContainers;)
        {
          loopCounter1 = loopCounter1 + 1;
          if (l_flt_TotalVolumePerContainer > 3000)
          {
            l_str_UnitsVolume = Translate("mL");
            l_flt_TotalVolumePerContainerML = l_flt_TotalVolumePerContainer / (1000 * 1.0);
            Reformat_ValuesForDialog(l_flt_TotalVolumePerContainerML, l_str_TotalVolumePerContainer);
          }
          else
          {
            l_str_TotalVolumePerContainer = l_flt_TotalVolumePerContainer;
            l_str_UnitsVolume = Translate("µL");
          }
          l_str_Description2 = StrConcat12(l_str_Description, l_str_TotalVolumePerContainer, Translate("  "), l_str_UnitsVolume, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          l_arr_DescriptionForDialog.AddAsLast(l_str_Description2);
          l_arr_VolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
        }
      }
    }
    else
    {
      l_flt_TotalVolumePerContainer = ((l_int_NumberOfSamplesPerContainer * i_flt_VolumePerSample)* i_flt_DeadVolumeReagent) + i_flt_DeadVolumeLabware;
      l_flt_TotalVolumePerContainer = MthRound(l_flt_TotalVolumePerContainer, 1);
      {
        for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfContainersNeeded;)
        {
          loopCounter1 = loopCounter1 + 1;
          if (l_flt_TotalVolumePerContainer > 3000)
          {
            l_str_UnitsVolume = Translate("mL");
            l_flt_TotalVolumePerContainerML = l_flt_TotalVolumePerContainer / (1000 * 1.0);
            Reformat_ValuesForDialog(l_flt_TotalVolumePerContainerML, l_str_TotalVolumePerContainer);
          }
          else
          {
            l_str_TotalVolumePerContainer = l_flt_TotalVolumePerContainer;
            l_str_UnitsVolume = Translate("µL");
          }
          l_str_Description = StrConcat12(l_str_Description, l_str_TotalVolumePerContainer, Translate("  "), l_str_UnitsVolume, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          l_arr_DescriptionForDialog.AddAsLast(l_str_Description);
          l_arr_VolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
        }
      }
    }
    Util2::Debug::TraceArray(Translate("-------------- l_arr_VolumePerContainer: "), l_arr_VolumePerContainer);
    Util2::Debug::TraceArray(Translate("-------------- l_arr_DescriptionForDialog: "), l_arr_DescriptionForDialog);
    o_arr_VolumesPerContainer=l_arr_VolumePerContainer;
    o_arr_DescriptionForDialog=l_arr_DescriptionForDialog;
    return;
  }
} // library namespace
