 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDNALibraryPrepKit_For_RNAWorkflows\\Library\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDNALibraryPrepKit_For_RNAWorkflows\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDNALibraryPrepKit_For_RNAWorkflows\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDNALibraryPrepKit_For_RNAWorkflows\\Library\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "HSLAppsLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDNALibraryPrepKit_For_RNAWorkflows\\Library\\InitWorkListLocation.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "VectorCustomDialogs\\VectorCustomDialogs.hsl" }
 namespace _Method { #include "AssignColorScheme\\ColorSchemeLibrary.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDNALibraryPrepKit_For_RNAWorkflows\\Library\\NGSStarLoading\\NGSStarLoading.hs_" }
 namespace _Method { #include "Stack_Reducer\\StackReducer.hs_" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDNALibraryPrepKit_For_RNAWorkflows\\Library\\Tools\\Tools_Library.hs_" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDNALibraryPrepKit_For_RNAWorkflows\\Library\\NGSStarLoading\\ARW_Global.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDNALibraryPrepKit_For_RNAWorkflows\\Library\\NGSStarLoading\\NGSStarLoading.hs_" }
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDNALibraryPrepKit_For_RNAWorkflows\\Methods\\UltraIIDNALibraryPrepKit_For_RNAWorkflows_Channels.res"
sequence t_seqMlStarSequenceNotUsed;
sequence t_seqMIDI_OnMagnet;
sequence t_seqHSP_Pipette;
sequence t_trpHSP_ODTC;
sequence t_trpHSP_Pipette;
sequence t_trpHamiltonComfortLidODTC;
sequence t_trp_Stack1;
sequence t_trpHamiltonComfortLidStackParkPos;
sequence t_trp_Stack4;
sequence t_trpHSP_Pipette2;
sequence t_trpMIDI_Pipette;
sequence t_trpMIDI_OnMagnet;
sequence t_trpHSP_Waste;
sequence t_trpMIDI_Waste;
sequence t_seqMIDI_Pipette;
sequence t_seqHSP_Pipette2;
sequence t_trpHamiltonComfortLidWaste;
variable t_intHHS1_HSP1;
variable t_intHHS2_HSP2;
variable t_intHHS3_HSP3_MIDI3;
variable t_intHHS4_MIDI1;
variable t_intHHS5_MIDI2;
variable t_arrIndex1IDs[];
variable t_arrIndex1PositionIDs[];
variable t_arrIndex2IDs[];
variable t_arrIndex2PositionIDs[];
variable t_arrSamplePositionIDs[];
variable t_arrAdapterLigatioPlateLabwareID[];
variable t_arrAdapterLigationPlatePositionIDs[];
variable t_blnODTCused;
variable t_blnSendEmails;
variable t_intRequiredNumberOf1000uLTipsM3;
variable t_intRequiredNumberOf1000uLTipsM4;
variable t_intRequiredNumberOf1000uLTipsM5;
variable t_intRequiredNumberOf300uLTipsM3;
variable t_intRequiredNumberOf300uLTipsM4;
variable t_intRequiredNumberOf300uLTipsM5;
variable t_intRequiredNumberOf50uLTipsM3;
variable t_intRequiredNumberOf50uLTipsM4;
variable t_intRequiredNumberOf50uLTipsM5;
variable t_strSerialNumberMLStar;
variable t_intSelectedIndexSTART;
variable t_intSelectedIndexSTOP;
variable t_strLocalIPAddressOfComputer;
variable t_strEmailAdress;
variable t_strDeviceAddressODTC;
variable t_intNumberOfSamplesFromFile;
variable t_intDeviceNumberODTC;
variable t_blnTestODTCWithShortDummyProtocol;
variable t_intRequiredNumberOf300uLTipsM2;
variable t_intRequiredNumberOf50uLTipsM2;
variable t_intRequiredNumberOf1000uLTipsM2;
variable t_intSizeSelection;
variable t_fltVolumeUserEnzyme;
variable t_fltDiscardSupernatant_M3;
variable t_fltDiscardSupernatant_M5;
variable t_strODTCFolderXML;
variable t_blnShortenPreheat;
sequence t_seqHHS3_MIDI;
sequence t_trpHHS3_MIDI;
sequence t_trpHSP_OnMagnet;
sequence t_seqHSP_OnMagnet;
variable t_strPCRProgramODTC;
variable t_fltVolumeTransferSupernatant_M3;
variable t_arrBlnProcessActivation[];
variable t_fltVolumeEthanol80_1_Process05;
variable t_fltVolumeAMPureBeads01_Process03;
variable t_fltVolumeAMPureBeads01_Process05;
variable t_fltVolumeQ5Mastermix;
variable t_fltVolumeLigationMastermix;
variable t_fltVolumeDilutedAdapter_Process03;
variable t_blnSkipLoadingRoutine;
variable t_fltVolumeTEBuffer_Process03;
variable t_fltVolumeUniversalPrimer;
variable t_fltVolumeTEBuffer_Process05;
variable t_fltVolumeEthanol80_2_Process05;
variable t_fltVolumeEndPrepMastermix;
variable t_fltVolumeAMPureBeads02_Process03;
sequence t_seqAspirate_TEBuffer;
sequence t_seqAspirate_EndPrepMastermix;
sequence t_seqAspirate_AMPureBeads;
sequence t_seqAspirate_UserEnzyme;
sequence t_seqAspirate_UniversalPrimer;
sequence t_seqAspirate_Q5Mastermix;
sequence t_seqAspirate_Ethanol80;
sequence t_seqAspirate_DilutedAdapter;
sequence t_seqAspirate_LigationMastermix;
sequence t_seq_IndexPlate_Pipette;
sequence t_trp_IndexPlate_Pipette;
variable t_intRequestIDForActiveProtocol;
variable t_intTimeForProtocol;
variable l_arrEndDialogListInformation[];
variable t_blnStoreHSPoverNightWithinODTC;
variable t_blnStoreAtRoomTemperature;
variable t_blnSimulationMode;
variable t_blnUseMPHInsteadOfChannels;
variable t_strFullPathReportFile;
sequence t_arrTipAdapters[];
variable t_blnReduceDeckTo4ChannelSystem;
variable t_blnPostponedPrimerLoading;
variable t_fltVolumeNucleasefreeWater;
sequence t_seqAspirate_NucleasefreeWater;
variable t_blnDeactivatePipettingSteps;
variable t_blnActivateLockUnlockSystem;
variable t_strTipCounterNameTip300;
variable t_strTipCounterNameTip50;
variable t_strTipCounterNameTip1000;
variable t_str_PlatformUsed;
variable t_strHamiltonDirectory;
variable t_str_KitTitle;
variable t_intMaxPlatesPerStackHSP;
variable t_intMaxPlatesPerStackMIDI;
variable t_str_KitSupplier;
variable t_intMaxComfortLidPerStack;
variable l_intPlatformUsed;
sequence t_seqAspirate_Q5Mastermix_distinct;
sequence t_seqAspirate_UserEnzyme_distinct;
sequence t_seqAspirate_DilutedAdapter_distinct;
sequence t_seqAspirate_Ethanol80_distinct;
sequence t_seqAspirate_LigationMastermix_distinct;
sequence t_seqAspirate_EndPrepMastermix_distinct;
sequence t_seqAspirate_UniversalPrimer_distinct;
sequence t_seqAspirate_NucleasefreeWater_distinct;
sequence t_seqAspirate_AMPureBeads_distinct;
sequence t_seqAspirate_TEBuffer_distinct;
variable t_blnUse80PercentBeadVolumeAtProcess5;
variable l_strLastMessage;
global device ML_STAR ("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDNALibraryPrepKit_For_RNAWorkflows\\Methods\\UltraIIDNALibraryPrepKit_For_RNAWorkflows_Channels.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable l_intCOREGripper(2); // Choose transport tool CORE Gripper to perform transport steps with CORE gripper instead of iswap. Value = 2
    private variable l_intISWAP(1); // Choose Transport tool iswap with a value of 1
    private variable l_strChannelPatternAbort;
    private variable l_intResultTipCheck;
    private variable l_intTransportTool;
    private variable l_int_OptionSelected;
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIP_PRESENT_CHECK_5ML_1ML::_InitLibrary();
    NGSSTARPREP::_InitLibrary();
    NGSSTARPROCESSES::_InitLibrary();
    COLORSCHEMELIBRARY::_InitLibrary();
    NGSSTARLOADING::_InitLibrary();
    STACKREDUCER::_InitLibrary();
    TOOLS_LIBRARY::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDNALibraryPrepKit for RNA workflows - just clean ups - no size selections\nBy:          Stephan Grosch, Lucas Durandi, Camilo Gomez. Hamilton Bonaduz AG, Switzerland \nVersion:   1.02\nDate: 30-03-2022\nBased on  Reference Guide (NEB #E7645S/L, Version 6.1_5/20)\n\nVersion Notes:\n\nIF YOU ARE INTERESTED IN SIZESELECTIONS - YOU MAY INSTALL THE BASIC  UltraIIDNALibraryPrepKit\n\nVersioning : see at tab Version\nCRH - Hamilton UK\n1.Fixed issue with overnight storage in ODTC when option to cool is selected\n2. Fixed some issues with the MPH logic where the wring Bead mixing liquid class was being applied\n3. Fixed the loading steps for index primers, when the MPH is activated\n"));
    t_strTipCounterNameTip50 = Translate("50F_Counter");
    t_strTipCounterNameTip300 = Translate("SVF_Counter");
    t_strTipCounterNameTip1000 = Translate("1000F_Counter");
    t_blnSkipLoadingRoutine = ASWGLOBAL::BOOL::FALSE;
    t_blnDeactivatePipettingSteps = ASWGLOBAL::BOOL::FALSE;
    t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::FALSE;
    t_blnReduceDeckTo4ChannelSystem = ASWGLOBAL::BOOL::FALSE;
    t_blnActivateLockUnlockSystem = ASWGLOBAL::BOOL::FALSE;
    t_strHamiltonDirectory = Translate("C:\\Program Files (x86)\\Hamilton\\");
    t_str_KitSupplier = Translate("NEB");
    t_str_KitTitle = Translate("UltraIIDNALibraryPrepKit_For_RNAWorkflows");
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      t_str_PlatformUsed = Translate("ClinicalNGSStarlet");
      l_intPlatformUsed = 2;
      t_intMaxPlatesPerStackMIDI = 3;
      t_intMaxPlatesPerStackHSP = 5;
      t_intMaxComfortLidPerStack = 5;
    }
    else
    {
      t_str_PlatformUsed = Translate("NGSStar");
      l_intPlatformUsed = 1;
      t_intMaxPlatesPerStackMIDI = 4;
      t_intMaxPlatesPerStackHSP = 4;
      t_intMaxComfortLidPerStack = 5;
    }
    INIT_WORKLIST_LOCATION::LockLibrary();
    t_blnSimulationMode = Util::GetSimulationMode();
    t_strSerialNumberMLStar = GetSerialNumber(ML_STAR);
    NGSSTARPREP::DATA_HandOverSimulationModeForAllLocalSMTs(t_blnSimulationMode, ASWGLOBAL::BOOL::FALSE);
    if(0){
      l_intTransportTool = l_intISWAP;
    }
    l_intTransportTool = l_intCOREGripper;
    t_strEmailAdress = Translate("Type in your email adress");
    t_blnODTCused = ASWGLOBAL::BOOL::TRUE;
    t_blnTestODTCWithShortDummyProtocol = ASWGLOBAL::BOOL::FALSE;
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      t_strDeviceAddressODTC = "192.168.1.50";
      t_strLocalIPAddressOfComputer = "192.168.1.1";
    }
    else
    {
      t_strDeviceAddressODTC = "No ODTC used";
    }
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    COLORSCHEMELIBRARY::Assign(1);
    VectorCustomDialogs::Initialize();
    VectorCustomDialogs::ShowStatusDialog(Translate("NEBNextUltra II Directional DNA Library Prep Kit for Illumina"));
    VectorCustomDialogs::SetStatusText(Translate("Run Preparation..."));
    VectorCustomDialogs::SetStatusText(Translate("   Initializing Liquid Waste Sensor..."));
    if(0){
      NGSSTARPREP::LiquidWasteSensor_Init(2);
    }
    VectorCustomDialogs::SetStatusText(Translate("   Initializing CPAC chiller..."));
    NGSSTARPREP::CPAC_Init();
    NGSSTARPREP::CPAC_SetTemperature(6);
    VectorCustomDialogs::SetStatusText(Translate("   Initializing Hamilton Heater Shakers (HHSs)..."));
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::HHS_Init(t_intHHS3_HSP3_MIDI3, t_intHHS2_HSP2, t_intHHS1_HSP1, t_intHHS4_MIDI1, t_intHHS5_MIDI2, Translate("TCC"), Translate("0"), Translate("0"), Translate("0"), Translate("0"), ML_STAR);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS3_HSP3_MIDI3, 0);
    }
    else
    {
      NGSSTARPREP::HHS_Init(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2, Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), ML_STAR);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS1_HSP1, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS2_HSP2, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS3_HSP3_MIDI3, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS4_MIDI1, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS5_MIDI2, 0);
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_Init(t_strDeviceAddressODTC, t_intDeviceNumberODTC, t_strLocalIPAddressOfComputer);
    }
    NGSSTARPROCESSES::DATA_HandoverSequencesAndDataToSMT(ML_STAR, l_intTransportTool, Translate("NEB"), Translate("NEBNextUltraIIDNALibraryPrepKit"), t_blnDeactivatePipettingSteps, t_blnReduceDeckTo4ChannelSystem, t_strEmailAdress, t_blnActivateLockUnlockSystem, t_strFullPathReportFile, t_arrTipAdapters, t_blnUseMPHInsteadOfChannels);
    NGSSTARLOADING::DATA_HandOverDataToSMT_NGSStarLoading(t_strFullPathReportFile, 1, t_str_KitSupplier, t_str_KitTitle, t_blnUseMPHInsteadOfChannels, t_blnActivateLockUnlockSystem, t_strTipCounterNameTip50, t_strTipCounterNameTip300, t_strTipCounterNameTip1000, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ASWGLOBAL::BOOL::FALSE);
    _SelectProcesses();
    SeqRemoveAll(t_seqMlStarSequenceNotUsed);
    t_arrTipAdapters.SetSize(3);
    VectorCustomDialogs::SetStatusText(Translate("   Resources required..."));
    _CalculateAndLoadConsumables();
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process1_EndPrepcDNALibrary();
    }
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process2_AdapterLigationAndCleanUp();
    }
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process3_PCREnrichementOfAdapterLigatedDNA();
    }
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process4_PurificationOfDNA();
    }
    if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
    {
      ProcessX_StoreHSPWithinODTCOverNight(ML_STAR.HSP_Pipette2, t_blnStoreAtRoomTemperature);
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to unload all carriers?"), Translate("Yes"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to unload all carriers?"), Translate("No"));
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to defragment the tip racks?"), Translate("Yes"));
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to defragment the tip racks?"), Translate("No"));
    }
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(5);
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(5, Translate("Do you want to defragment the tip racks?"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      VectorCustomDialogs::SetStatusText(Translate("Defragment tip racks..."));
      NGSSTARPROCESSES::PIP_DefragmentTipRacks(ML_STAR);
    }
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(5, Translate("Do you want to unload all carriers?"), l_int_OptionSelected);
    Trace("Option selected : ",l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      VectorCustomDialogs::SetStatusText(Translate("Unloading the deck..."));
      MECC::TraceComment(Translate("***** Unload Carriers *****"));
      if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      else
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
    }
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    l_strLastMessage = StrConcat8(Translate("Dear user, \n"), Translate(""), Translate("check your system :  \n\n"), Translate(""), Translate("1) Check / empty the tip waste, \n"), Translate("2) Check / empty the liquid waste container, \n"), Translate("3) Remove and store reagents and created plates. \n"), Translate(""));
    NGSSTARLOADING::Display_Message_Dialog(l_strLastMessage);
    VectorCustomDialogs::SetStatusText(Translate(" ииииииииииииии METHOD COMPLETED ииииииииииииии "));
    VectorCustomDialogs::SetStatusText(Translate("Preparing for run shutdown..."));
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::PIP_CleanUpTipAdapter(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    }
    NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::HHS_Terminate(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2);
    NGSSTARPREP::CPAC_Terminate();
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_Terminate(t_intDeviceNumberODTC, ASWGLOBAL::BOOL::FALSE);
    }
    l_intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, l_strChannelPatternAbort, 8);
    if (l_intResultTipCheck == 1)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    VectorCustomDialogs::Terminate();
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("Workflow completed"), Translate("All selected processes have been completed successfully. Clean the deck and empty the liquid waste."));
    }
    TIP_PRESENT_CHECK_5ML_1ML::_ExitLibrary();
    NGSSTARPREP::_ExitLibrary();
    NGSSTARPROCESSES::_ExitLibrary();
    COLORSCHEMELIBRARY::_ExitLibrary();
    NGSSTARLOADING::_ExitLibrary();
    STACKREDUCER::_ExitLibrary();
    TOOLS_LIBRARY::_ExitLibrary();
  } }
