private function Process1_EndPrepcDNALibrary(  ) void ;
private function Process2_AdapterLigationAndCleanUp(  ) void ;
private function Process3_PCREnrichementOfAdapterLigatedDNA(  ) void ;
private function Process4_PurificationOfDNA(  ) void ;
private function ProcessX_StoreHSPWithinODTCOverNight( sequence & i_trpHSP, variable i_blnIncubateODTCWithoutActiveCooling ) void ;
private function _CalculateAndLoadConsumables(  ) void ;
private function _SelectProcesses(  ) void ;
private function _VersionHistory(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private variable l_strChannelPatternAbort;
  private variable l_intResultTipCheck;
  private variable l_retValueDialog;
  VectorCustomDialogs::SetStatusText(Translate("¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨METHOD ABORTED¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨"));
  if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_SendEmail(Translate("Method aborted"), Translate("Read report file and logfile. Clean the deck and empty the liquid waste."));
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_Terminate(t_intDeviceNumberODTC, ASWGLOBAL::BOOL::TRUE);
  }
  NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  l_arrEndDialogListInformation.SetSize(0);
  l_arrEndDialogListInformation.AddAsLast(Translate("1) Check / empty the tip waste, "));
  l_arrEndDialogListInformation.AddAsLast(Translate("2) Check / empty the liquid waste container,"));
  l_arrEndDialogListInformation.AddAsLast(Translate("3) Remove and store reagents and created plates."));
  l_retValueDialog = VectorCustomDialogs::ListDialog(Translate("Method aborted."), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 60, Translate(""), Translate("Press OK to terminate all active devices and close the method."), l_arrEndDialogListInformation);
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  NGSSTARPREP::HHS_Terminate(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2);
  NGSSTARPREP::CPAC_Terminate();
  l_intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, l_strChannelPatternAbort, 8);
  if (l_intResultTipCheck == 1)
  {
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  else
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  VectorCustomDialogs::Terminate();
}

private function _VersionHistory(  ) void {
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      April 17, 2020\nVersion:  0.01\nBased on Kit provider KitName Preparation Reference Guide (NEB7400, version 1.0_4_20)\n\nVersion Notes:\n1. Select Processes, Group \"Precool / Preheat the ODTC for the planned processes\", preheating GINIT scripts were adopted from Method \"20200318_NEBNextUltraIIDirectionalRNA_PolyA_v0.25\"\n2. updated NGSSTARProcesses to v2.5.2 (Pip_MIXOnly changed plausibilitytest)\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      April 21, 2020\nVersion:  0.02\nBased on Kit provider KitName Preparation Reference Guide (NEB7400, version 1.0_4_20)\n\nVersion Notes:\n1. Development Deck framework 2.5 was changed to standard NGS Star Deck layout. \n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDNALibraryPrepKit\nBy:          Lucas Durandi, Hamilton Bonaduz AG, Ch\nDate:      May 06, 2020\nVersion:  0.04 (This version originates from corrections made to version 0.02. Ignore version 0.03)\nBased on NEBNext Ultra II, Directional RNA (#E7760/L, #E7765S/L)\nInstruction Manual Version 3.0_10/19\n\nVersion Notes:\n\n1. Changed source sequence for index primers pipetted from plate from \"t_seq_IndexPlate_Pipette\" to \"t_seqHSP_Pipette\" (Line471)\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDNALibraryPrepKit\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      May 11, 2020\nVersion:  0.07 \nBased on NEBNext Ultra II, Directional RNA (#E7760/L, #E7765S/L)\nInstruction Manual Version 3.0_10/19\n\nVersion Notes:\n\n1. updated new versions of NGSSTARProcesses\n2. additional Transfer of water introduced if size selection is chosen @ Process3 right before size selection starts\n3. set Process 1 to mandatory stopping point as P1 includes chemistry of P2. User will only process P1, P3-P5 or P2 to P5. P1 and P2 may never be combined \n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDNALibraryPrepKit\nBy:          Lucas Durandi, Hamilton Bonaduz AG, Ch\nDate:      June 3, 2020\nVersion:  0.08 \nBased on NEBNext Ultra II, Directional RNA (#E7760/L, #E7765S/L)\nInstruction Manual Version 3.0_10/19\n\nVersion Notes:\n\n1. Introduced Line 355 (NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish)\n2. Hard-coded \"'15'' uL in Line 441\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      June 22, 2020\nVersion:  0.09 \nBased on NEBNext Ultra II, Directional RNA (#E7760/L, #E7765S/L)\nInstruction Manual Version 3.0_10/19\n\nVersion Notes:\n\n1. ODTC script were renamed including prefix \"NEB_DNA_\" to differentiate from scripts of other protocols. E.g. \"NEB_DNA_Init_4C\" instead \"Init_4C\"\n2. Amplification Cycle numbers was increased from 7 to 17 cycles, to 3 to 17 cycles. In order to be able to amplify only NebNext Ultra DNA II. \n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDNALibraryPrepKit\nBy:          Lucas Durandi, Hamilton Bonaduz AG, Ch\nDate:      July 01, 2020\nVersion:  0.10 \nBased on NEBNext Ultra II, Directional RNA (#E7760/L, #E7765S/L)\nInstruction Manual Version 3.0_10/19\n\nVersion Notes:\n\n1. Fixed hight of index primer plate transfer in process 4 was reduced from 1 to 0.1 (mm).\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDNALibraryPrepKit\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      July 13, 2020\nVersion:  0.11\nBased on NEBNext Ultra II, Directional RNA (#E7760/L, #E7765S/L)\nInstruction Manual Version 3.0_10/19\n\nVersion Notes:\n\n1. Fixed Loopcounter index to select correct PCR cycle number within select Processes tab. (changed from 6 to 2)\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDNALibraryPrepKit\nBy:          Lucas Durandi, Hamilton Bonaduz AG, Ch\nDate:      July 29, 2020\nVersion:  0.13\nBased on NEBNext Ultra II, Directional RNA (#E7760/L, #E7765S/L)\nInstruction Manual Version 3.0_10/19\n\nVersion Notes:\n\n1. Introduced ADC for PIP Adaptor Ligation Master Mix in process 3\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDNALibraryPrepKit\nBy:          Lucas Durandi, Hamilton Bonaduz AG, Ch\nDate:      August 05, 2020\nVersion:  0.14\nBased on NEBNext Ultra II, Directional RNA (#E7760/L, #E7765S/L)\nInstruction Manual Version 3.0_10/19\n\nVersion Notes:\n\n1. Changed fixed hight aspiration from 1.0 to 0.8 for all sample transfer steps: 2 x 2 in process 3 and 2 x 2 in process 5\n2. Correction point within liquidclass (first sample transfer of size selection in process 3) corrected from 92 to 98.\n3. USER ENYZME DV Calculations reduced from 40 uL to 18 uL on 2020-08-07\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDNALibraryPrepKit\nBy:          Lucas Durandi, Hamilton Bonaduz AG, Ch\nDate:      August 12, 2020\nVersion:  0.15\nBased on NEBNext Ultra II, Directional RNA (#E7760/L, #E7765S/L)\nInstruction Manual Version 3.0_10/19\n\nVersion Notes:\n\n1. Changed back aspiration fixed hight from 0.8 to 1.0 for all sample transfer steps: 2 x 2 in process 3 and 2 x 2 in process 5\n2. Adapted EtOH liquid class settings to the parameters found for the same liquid class in the RNA method.\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDNALibraryPrepKit\nBy:          Lucas Durandi, Hamilton Bonaduz AG, Ch\nDate:      August 18, 2020\nVersion:  0.16\nBased on NEBNext Ultra II, Directional RNA (#E7760/L, #E7765S/L)\nInstruction Manual Version 3.0_10/19\n\nVersion Notes:\n\n1. Changed all HSP to MIDI transfer aspiration hights in process 3 and 5 (2x2) to 0.8\n2. Changed all MIDI to HSP transfer aspiration hights in process 3 and 5 (2x2) to 1.2\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDNALibraryPrepKit for RNA workflows - just clean ups - no size selections\nBy:          Stephan Grosch, Lucas Durandi, Camilo Gomez. Hamilton Bonaduz AG, Switzerland \nVersion:   1.01\nDate: 30-03-2022\nBased on  Reference Guide (NEB #E7645S/L, Version 6.1_5/20)\n\nVersion Notes:\n\nIF YOU ARE INTERESTED IN SIZESELECTIONS - YOU MAY INSTALL THE BASIC  UltraIIDNALibraryPrepKit\n\nVersioning : see at tab Version\nCRH - Hamilton UK\n1.Fixed issue with overnight storage in ODTC when option to cool is selected\n2. Fixed some issues with the MPH logic where the wring Bead mixing liquid class was being applied\n3. Fixed the loading steps for index primers, when the MPH is activated\n"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDNALibraryPrepKit for RNA workflows - just clean ups - no size selections\nBy:          Stephan Grosch, Lucas Durandi, Camilo Gomez. Hamilton Bonaduz AG, Switzerland \nVersion:   1.02\nDate: November 17-2022\nBased on  Reference Guide (NEB #E7645S/L, Version 6.1_5/20)\n\nVersion Notes:\n\nIF YOU ARE INTERESTED IN SIZESELECTIONS - YOU MAY INSTALL THE BASIC  UltraIIDNALibraryPrepKit\n\nVersion Notes:\n 1. Implemented if else statements to configure the GUIs asking for Lids and PCR cycles if ODTC is active only. If not - no User will be asked to load a lid or to define PCR cycles anymore.\n 2. Field APS wanted to interprete the input work list Position IDs for indexes at columns for INDEX 1 instead of INDEX 2 --> changed accodingly to set up sequences using array t_arrIndex1PositionIDs\n 3. Removed AntiDropletControl from Process 2 pipetting step : LigationMasterMix\n 4. exchanged script names from \"StorePlateOverNight.xml\" to match the requested script names from Process X and checked if stored at room temperature is ok\n 5. Changed index from 4 to 3 within process 2 - preheat statement for next operation with odtc from --> t_arrBlnProcessActivation[4] into t_arrBlnProcessActivation[3]\n 6. Process 2 changed logic from lid handling of ODTC after finished process 2 --> waste is only if Storage or process 3 is not activated . In other cases keep it at park position\n 7. Calculation of Midi plates based on NO size selection branch...just 1 MIDI plate needed for process 2\n 8. Select processes tab : changed process name 2 from adapter ligation and size selection into adapter ligation and clean up as there will no size selection performed - just a simple clean up \n 9. IF NO ODTC is selected - dont£t show to load a lid\n\n*************************************************************************************************************************************\n"));
}

private function _CalculateAndLoadConsumables(  ) void {
  private variable l_intNumberOf50uLTips;
  private variable l_intNumberOfMIDIPlates;
  private variable l_intNumberOf1000uLTips;
  private variable l_intNumberOf300uLTips;
  private variable l_intNumberOfHSPPlates;
  private variable l_intNumberOfHamiltonComfortLids;
  private sequence l_arr_seqReagentsOn50mlContainers[];
  private variable l_arr_strReagentNamesOn50mlContainers[];
  private variable l_arr_fltReagentVolumesOn50mlContainers[];
  private variable l_blnInputplateAlreadyLoaded;
  private variable l_blnHamiltonComfortLidAlreadyLoaded;
  private variable l_intNumberOf300ExtraTips;
  private variable l_intNumberOf50ExtraTips;
  private variable l_bln_CarrierLoadable;
  private variable l_arr_fltReagentVolumesOnTubeAdapterEndPrepMastermix[];
  private variable l_arr_fltReagentVolumesOnTubeAdapterQ5Mastermix[];
  private variable l_arr_fltReagentVolumesOnTubeAdapterUSEREnzyme[];
  private variable l_arr_fltReagentVolumesOn50mlContainerEthanol80[];
  private variable l_arr_fltReagentVolumesOnTubeAdapterDilutedAdaptor[];
  private variable l_arr_fltReagentVolumesOn50mlContainerSamplePurificationBeads[];
  private variable l_arr_fltReagentVolumesOnTubeAdapterUniversalPrimeri5[];
  private variable l_arr_fltReagentVolumesOn50mlContainerNucleaseFreeWater[];
  private variable l_arr_fltReagentVolumesOnTubeAdapterLigationMasterMix[];
  private variable l_arr_fltReagentVolumesOn50mlContainerTEBuffer[];
  private variable l_str_Index2_PositionID;
  private variable l_int_NumberOfIndexes;
  private variable l_str_IndexID1;
  private variable l_str_IndexID2;
  private variable loopCounter1;
  private variable l_str_Index1_PositionID;
  MECC::TraceComment(Translate("--------------- CalculateAndLoadConsumables"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Calculate and load consumables"), ASWGLOBAL::BOOL::YES);
  l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::FALSE;
  t_blnPostponedPrimerLoading = ASWGLOBAL::BOOL::FALSE;
  l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::FALSE;
  MECC::TraceComment(Translate("---------------------------------------------------------------------------\nProcess1_End Prep of cDNA Library\n---------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_blnPostponedPrimerLoading = ASWGLOBAL::BOOL::TRUE;
    t_fltVolumeEndPrepMastermix = NGSSTARLOADING::Define_VolumePerWell(Translate("End Prep of cDNA Library Mastermix"), 10);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("End Prep of cDNA Library Mastermix"), Translate("NEBNext Ultra II End Prep Reaction Buffer"), 7);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("End Prep of cDNA Library Mastermix"), Translate("NEBNext Ultra II End Prep Enzyme Mix"), 3);
    l_intNumberOfMIDIPlates = 0;
    l_intNumberOfHSPPlates = 0;
    if (l_blnHamiltonComfortLidAlreadyLoaded == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfHamiltonComfortLids = 0;
    }
    else
    {
      if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
      {
        l_intNumberOfHamiltonComfortLids = 1;
      }
      else
      {
        l_intNumberOfHamiltonComfortLids = 0;
      }
    }
    l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    l_intNumberOf1000uLTips = 0;
    l_intNumberOf300uLTips = 0;
    l_intNumberOf50uLTips = 1 * t_intNumberOfSamplesFromFile;
    t_intRequiredNumberOf1000uLTipsM2 = l_intNumberOf1000uLTips;
    t_intRequiredNumberOf300uLTipsM2 = l_intNumberOf300uLTips;
    t_intRequiredNumberOf50uLTipsM2 = l_intNumberOf50uLTips;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Sample input plate containing 50ul (c)DNA"), 1, ML_STAR.HSP_Pipette2, 0);
      l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    }
  }
  MECC::TraceComment(Translate("---------------------------------------------------------------------------\nProcess2_Adaptor Ligation\n---------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_blnPostponedPrimerLoading = ASWGLOBAL::BOOL::TRUE;
    t_fltVolumeDilutedAdapter_Process03 = NGSSTARLOADING::Define_VolumePerWell(Translate("Diluted Adapter - according user manual instructions"), 2.5);
    t_fltVolumeLigationMastermix = NGSSTARLOADING::Define_VolumePerWell(Translate("Ligation Mastermix"), 31);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Ligation Mastermix"), Translate("NEBNext Ligation Enhancer"), 1);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Ligation Mastermix"), Translate("NEBNext Ultra II Ligation Mastermix"), 30);
    t_fltVolumeUserEnzyme = NGSSTARLOADING::Define_VolumePerWell(Translate("NEBNext Ultra II User Enzyme"), 3);
    t_fltVolumeAMPureBeads02_Process03 = NGSSTARLOADING::Define_VolumePerWell(Translate("AMPure Beads"), 87);
    t_fltDiscardSupernatant_M3 = 200;
    t_fltVolumeTransferSupernatant_M3 = 50 + t_fltVolumeDilutedAdapter_Process03 + t_fltVolumeLigationMastermix +t_fltVolumeUserEnzyme + t_fltVolumeAMPureBeads01_Process03 + t_fltVolumeNucleasefreeWater + 5;
    NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 400);
    t_fltVolumeTEBuffer_Process03 = NGSSTARLOADING::Define_VolumePerWell(Translate("TE Buffer"), 17);
    l_intNumberOfMIDIPlates = 1;
    l_intNumberOf300uLTips = 7 * t_intNumberOfSamplesFromFile;
    l_intNumberOf300ExtraTips = 21;
    l_intNumberOf300uLTips = l_intNumberOf300uLTips + l_intNumberOf300ExtraTips;
    if(0){
      if (t_intSizeSelection == 7)
      {
      }
      else
      {
        l_intNumberOfMIDIPlates = 2;
        l_intNumberOf300uLTips = 10 * t_intNumberOfSamplesFromFile;
        l_intNumberOf300ExtraTips = 28;
        l_intNumberOf300uLTips = l_intNumberOf300uLTips + l_intNumberOf300ExtraTips;
      }
    }
    l_intNumberOfHSPPlates = 1;
    if (l_blnHamiltonComfortLidAlreadyLoaded == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfHamiltonComfortLids = 0;
    }
    else
    {
      if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
      {
        l_intNumberOfHamiltonComfortLids = 1;
      }
      else
      {
        l_intNumberOfHamiltonComfortLids = 0;
      }
    }
    l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    l_intNumberOf1000uLTips = 16;
    l_intNumberOf50uLTips = 4 * t_intNumberOfSamplesFromFile;
    l_intNumberOf50ExtraTips = 14;
    l_intNumberOf50uLTips = l_intNumberOf50uLTips + l_intNumberOf50ExtraTips;
    t_intRequiredNumberOf1000uLTipsM3 = l_intNumberOf1000uLTips;
    t_intRequiredNumberOf300uLTipsM3 = l_intNumberOf300uLTips;
    t_intRequiredNumberOf50uLTipsM3 = l_intNumberOf50uLTips;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Sample input plate containing 50ul (c)DNA"), 1, ML_STAR.HSP_Pipette2, 0);
      l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    }
  }
  MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess3_PCR Enrichment of Adaptor Ligated DNA\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltVolumeQ5Mastermix = NGSSTARLOADING::Define_VolumePerWell(Translate("NEBNext Ultra II Q5 Master Mix"), 25);
    if (g_bln_IndexesOnPlate == ASWGLOBAL::BOOL::FALSE)
    {
      t_fltVolumeUniversalPrimer = NGSSTARLOADING::Define_VolumePerWell(Translate("Universal PCR Primer/i5 Primer"), 5);
    }
    else
    {
      t_fltVolumeUniversalPrimer = 10;
    }
    l_intNumberOfMIDIPlates = 0;
    l_intNumberOfHSPPlates = 0;
    if (l_blnHamiltonComfortLidAlreadyLoaded == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfHamiltonComfortLids = 0;
    }
    else
    {
      if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
      {
        l_intNumberOfHamiltonComfortLids = 1;
      }
      else
      {
        l_intNumberOfHamiltonComfortLids = 0;
      }
    }
    l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    l_intNumberOf1000uLTips = 0;
    l_intNumberOf300uLTips = 0 * t_intNumberOfSamplesFromFile;
    if (g_bln_IndexesOnPlate == ASWGLOBAL::BOOL::FALSE)
    {
      l_intNumberOf50uLTips = 3 * t_intNumberOfSamplesFromFile;
    }
    else
    {
      l_intNumberOf50uLTips = 2 * t_intNumberOfSamplesFromFile;
    }
    t_intRequiredNumberOf1000uLTipsM4 = l_intNumberOf1000uLTips;
    t_intRequiredNumberOf300uLTipsM4 = l_intNumberOf300uLTips;
    t_intRequiredNumberOf50uLTipsM4 = l_intNumberOf50uLTips;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    if (t_blnPostponedPrimerLoading == ASWGLOBAL::BOOL::FALSE)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Primer input plate"), 1, ML_STAR.HSP_Pipette, 0);
    }
    if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Sample input plate containing 50ul (c)DNA"), 1, ML_STAR.HSP_Pipette2, 0);
      l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    }
    if(0){
      if (g_bln_IndexesOnPlate == ASWGLOBAL::BOOL::FALSE)
      {
        l_int_NumberOfIndexes=t_arrIndex1PositionIDs.GetSize();
        Util2::Debug::TraceArray(Translate("t_arrIndex1IDs : "), t_arrIndex1IDs);
        Util2::Debug::TraceArray(Translate("t_arrIndex1PositionIDs : "), t_arrIndex1PositionIDs);
        Util2::Debug::TraceArray(Translate("t_arrIndex2IDs : "), t_arrIndex2IDs);
        Util2::Debug::TraceArray(Translate("t_arrIndex2PositionIDs : "), t_arrIndex2PositionIDs);
        {
          for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfIndexes;)
          {
            loopCounter1 = loopCounter1 + 1;
            l_str_IndexID1=t_arrIndex1IDs.GetAt(loopCounter1-1);
            l_str_IndexID2=t_arrIndex2IDs.GetAt(loopCounter1-1);
            l_str_Index1_PositionID=t_arrIndex1PositionIDs.GetAt(loopCounter1-1);
            l_str_Index2_PositionID=t_arrIndex2PositionIDs.GetAt(loopCounter1-1);
            NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Sarstedt_Tube_500uL, l_str_IndexID1, 1, ML_STAR.CAR_Adapter_Tubes, l_str_Index1_PositionID);
            NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Sarstedt_Tube_500uL, l_str_IndexID2, 1, ML_STAR.CAR_Adapter_Tubes, l_str_Index2_PositionID);
          }
        }
      }
    }
  }
  MECC::TraceComment(Translate("-------------------------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess4_Purification of the PCR Reaction using SPRIselect Beads or NEBNext Sample Purification Beads\n-------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnUse80PercentBeadVolumeAtProcess5 == ASWGLOBAL::BOOL::TRUE)
    {
      t_fltVolumeAMPureBeads01_Process05 = NGSSTARLOADING::Define_VolumePerWell(Translate("AMPure Beads"), 40);
    }
    else
    {
      t_fltVolumeAMPureBeads01_Process05 = NGSSTARLOADING::Define_VolumePerWell(Translate("AMPure Beads"), 45);
    }
    t_fltVolumeEthanol80_1_Process05 = NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 200);
    t_fltVolumeEthanol80_2_Process05 = NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 400);
    t_fltVolumeTEBuffer_Process05 = NGSSTARLOADING::Define_VolumePerWell(Translate("TE Buffer"), 23);
    l_intNumberOfMIDIPlates = 1;
    l_intNumberOfHSPPlates = 1;
    l_intNumberOfHamiltonComfortLids = 0;
    l_intNumberOf1000uLTips = 16;
    l_intNumberOf50uLTips = 2 * t_intNumberOfSamplesFromFile;
    l_intNumberOf50ExtraTips = 14;
    l_intNumberOf50uLTips = l_intNumberOf50uLTips + l_intNumberOf50ExtraTips;
    l_intNumberOf300uLTips = 6 * t_intNumberOfSamplesFromFile;
    l_intNumberOf300ExtraTips = 21;
    l_intNumberOf300uLTips = l_intNumberOf300uLTips + l_intNumberOf300ExtraTips;
    t_intRequiredNumberOf1000uLTipsM5 = l_intNumberOf1000uLTips;
    t_intRequiredNumberOf300uLTipsM5 = l_intNumberOf300uLTips;
    t_intRequiredNumberOf50uLTipsM5 = l_intNumberOf50uLTips;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Sample input plate containing 50ul (c)DNA"), 1, ML_STAR.HSP_Pipette2, 0);
      l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    }
    t_fltDiscardSupernatant_M5 = 200;
  }
  if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
  {
    if (l_blnHamiltonComfortLidAlreadyLoaded == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfHamiltonComfortLids = 0;
    }
    else
    {
      if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
      {
        l_intNumberOfHamiltonComfortLids = 1;
      }
      else
      {
        l_intNumberOfHamiltonComfortLids = 0;
      }
    }
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
  }
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("End Prep of cDNA Library Mastermix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 40, 30, ML_STAR.CPACTubeAdapter, 0, 0, t_seqAspirate_EndPrepMastermix_distinct, t_seqAspirate_EndPrepMastermix, l_arr_fltReagentVolumesOnTubeAdapterEndPrepMastermix);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("AMPure Beads"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 50000, 3000, 10, ML_STAR.RGT50, 0, 0, t_seqAspirate_AMPureBeads_distinct, t_seqAspirate_AMPureBeads, l_arr_fltReagentVolumesOn50mlContainerSamplePurificationBeads);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Ethanol 80%"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 50000, 7000, 10, ML_STAR.RGT50, 0, 0, t_seqAspirate_Ethanol80_distinct, t_seqAspirate_Ethanol80, l_arr_fltReagentVolumesOn50mlContainerEthanol80);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("TE Buffer"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 50000, 3000, 10, ML_STAR.RGT50, 0, 0, t_seqAspirate_TEBuffer_distinct, t_seqAspirate_TEBuffer, l_arr_fltReagentVolumesOn50mlContainerTEBuffer);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Diluted Adapter - according user manual instructions"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 40, 10, ML_STAR.CPACTubeAdapter, 0, 0, t_seqAspirate_DilutedAdapter_distinct, t_seqAspirate_DilutedAdapter, l_arr_fltReagentVolumesOnTubeAdapterDilutedAdaptor);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Ligation Mastermix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 40, 10, ML_STAR.CPACTubeAdapter, 0, 0, t_seqAspirate_LigationMastermix_distinct, t_seqAspirate_LigationMastermix, l_arr_fltReagentVolumesOnTubeAdapterLigationMasterMix);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("NEBNext Ultra II User Enzyme"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 18, 5, ML_STAR.CPACTubeAdapter, 0, 0, t_seqAspirate_UserEnzyme_distinct, t_seqAspirate_UserEnzyme, l_arr_fltReagentVolumesOnTubeAdapterUSEREnzyme);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Nuclease-free water"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 50000, 7000, 10, ML_STAR.RGT50, 0, 0, t_seqAspirate_NucleasefreeWater_distinct, t_seqAspirate_NucleasefreeWater, l_arr_fltReagentVolumesOn50mlContainerNucleaseFreeWater);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("NEBNext Ultra II Q5 Master Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 40, 10, ML_STAR.CPACTubeAdapter, 0, 0, t_seqAspirate_Q5Mastermix_distinct, t_seqAspirate_Q5Mastermix, l_arr_fltReagentVolumesOnTubeAdapterQ5Mastermix);
  if (g_bln_IndexesOnPlate == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Universal PCR Primer/i5 Primer"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 40, 10, ML_STAR.CPACTubeAdapter, 0, 0, t_seqAspirate_UniversalPrimer_distinct, t_seqAspirate_UniversalPrimer, l_arr_fltReagentVolumesOnTubeAdapterUniversalPrimeri5);
  }
  NGSSTARLOADING::Display_Mastermix_Dialog();
  MECC::TraceComment(Translate("After all liquids have been defined..the evaluate step calculates the needed resources\n"));
  NGSSTARLOADING::Evaluate_ResourcesByCarrier();
  NGSSTARLOADING::Retrieve_50mlTrough_ReagentsVolumesAndSequences(l_arr_strReagentNamesOn50mlContainers, l_arr_fltReagentVolumesOn50mlContainers, l_arr_seqReagentsOn50mlContainers);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrIndex1PositionIDs, t_seq_IndexPlate_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrIndex1PositionIDs, t_trp_IndexPlate_Pipette, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_ODTC, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_ODTC, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Pipette, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_Pipette2, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Pipette2, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_OnMagnet, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_OnMagnet, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Waste, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.Ham_ComfortLid_ODTC, t_arrAdapterLigationPlatePositionIDs, t_trpHamiltonComfortLidODTC, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.Ham_ComfortLid_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpHamiltonComfortLidWaste, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arrAdapterLigationPlatePositionIDs, t_seqMIDI_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_Pipette, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_seqMIDI_OnMagnet, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_OnMagnet, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_Waste, 2);
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_seqHHS3_MIDI, 1);
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_trpHHS3_MIDI, 2);
  }
  else
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_seqHHS3_MIDI, 1);
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_trpHHS3_MIDI, 2);
  }
  MECC::TraceComment(Translate("Setting sequences completed"));
  SeqRemoveAll(t_trp_Stack1);
  SeqRemoveAll(t_trp_Stack4);
  SeqRemoveAll(t_trpHamiltonComfortLidStackParkPos);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfMIDI, ML_STAR.Stack_MIDI, t_trp_Stack1, t_intMaxPlatesPerStackMIDI, ML_STAR);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfHSP, ML_STAR.Stack4, t_trp_Stack4, t_intMaxPlatesPerStackHSP, ML_STAR);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfComfortLid, ML_STAR.Ham_ComfortLid_Stack_ParkPos, t_trpHamiltonComfortLidStackParkPos, t_intMaxComfortLidPerStack, ML_STAR);
  Trace ("BEFORE  ********* g_int_TotalNumberOfComfortLid:   ", g_int_TotalNumberOfComfortLid);
  Trace ("********* t_intMaxComfortLidPerStack:   ", t_intMaxComfortLidPerStack);
  Trace ("********* l_intNumberOfHamiltonComfortLids:   ", l_intNumberOfHamiltonComfortLids);
  Trace ("********* g_int_TotalNumberOfHSP:   ", g_int_TotalNumberOfHSP);
  Trace ("********* t_intMaxPlatesPerStackHSP:   ", t_intMaxPlatesPerStackHSP);
  Trace ("********* l_intNumberOfHSPPlates:   ", l_intNumberOfHSPPlates);
  Trace ("********* g_int_TotalNumberOfMIDI:   ", g_int_TotalNumberOfMIDI);
  Trace ("********* t_intMaxPlatesPerStackMIDI:   ", t_intMaxPlatesPerStackMIDI);
  Trace ("********* l_intNumberOfMIDIPlates:   ", l_intNumberOfMIDIPlates);
  MECC::TraceComment(Translate("Stack reduced completed"));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::ODTC, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("ODTCHamiltonComforlidPosition.jpg"), Translate("HamiltonComfortLid.png"));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::PLT_Stack, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("PlateStackerCarrier.jpg"), Translate("PlateStackerCarrier_SubImage.jpg"));
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::Display_Message_Dialog(Translate("Please make sure to include ALL the tips which are loaded onto the system in the Tip Counter dialogue which will be displayed after clicking OK below."));
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::TIP50_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("Tip50ulFilterCarriers.jpg"), Translate("TIP_50.png"));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::TIP300_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("Tip300ulFilterCarriers.jpg"), Translate("TIP_300.png"));
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    l_bln_CarrierLoadable = ASWGLOBAL::BOOL::FALSE;
  }
  else
  {
    l_bln_CarrierLoadable = ASWGLOBAL::BOOL::TRUE;
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::RGT1, t_blnSkipLoadingRoutine, l_bln_CarrierLoadable, ASWGLOBAL::BOOL::FALSE, Translate("ReagentContainerCarrier1.jpg"), Translate(""));
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::RGT2, t_blnSkipLoadingRoutine, l_bln_CarrierLoadable, ASWGLOBAL::BOOL::FALSE, Translate("ReagentContainerCarrier2.jpg"), Translate(""));
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Tube_Carrier24, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("CarrierVial24.jpg"), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Vial_Carrier32_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("CarrierVial32_1.jpg"), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Vial_Carrier32_02, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("CarrierVial32_2.jpg"), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::PLT_TIP1000, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("PlateTipCarrier.jpg"), Translate("TIP_1000.png"));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::HHSx2_PLT, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("HHS_HSP_PipettePosition.jpg"), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::CPAC, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("CPACCarrier.jpg"), Translate("CPAC_Adapter.png"));
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  else
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  NGSSTARLOADING::Display_Message_Dialog(Translate("Deck loading completed. Press OK to start the run."));
}

private function _SelectProcesses(  ) void {
  private variable l_intIndexSettingsDoubleOrSingleIndexing;
  private variable l_strIndexLabwareFormat;
  private variable l_strFileInputWorklist;
  private variable l_arr_strProcessID[];
  private variable l_intLengthEmailAddress;
  private variable l_int_OptionSelected;
  private variable l_str_PCRCycleCounter;
  private variable l_int_PCRCycleCounter;
  private variable l_int_LoopCounter1;
  private variable l_int_IndexElement;
  private variable l_intDialogID;
  private variable l_arr_strMandatoryStopProcess[];
  private variable l_arr_strDeactivatedStartProcessID[];
  private variable l_arr_strProcessIDCombinations[];
  l_arr_strProcessID.SetSize(0);
  l_arr_strProcessID.AddAsLast(Translate("Process01: End Prep of cDNA Library"));
  l_arr_strProcessID.AddAsLast(Translate("Process02: Adapter Ligation and Clean Up"));
  l_arr_strProcessID.AddAsLast(Translate("Process03: PCR Enrichment"));
  l_arr_strProcessID.AddAsLast(Translate("Process04: Purification of PCR Reaction"));
  l_arr_strProcessIDCombinations.SetSize(0);
  l_arr_strProcessIDCombinations.AddAsLast(Translate("1.2.3.4"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("2.3.4"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("3.4"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("4"));
  l_arr_strDeactivatedStartProcessID.SetSize(0);
  l_arr_strMandatoryStopProcess.SetSize(0);
  MECC::TraceComment(Translate("PROCESS DEFINITIONS - INPUT"));
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strProcessID:"), l_arr_strProcessID);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strProcessIDCombinations:"), l_arr_strProcessIDCombinations);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strDeactivatedStartProcessID:"), l_arr_strDeactivatedStartProcessID);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strMandatoryStopProcess:"), l_arr_strMandatoryStopProcess);
  NGSSTARLOADING::Display_SelectProcesses_Dialog(1, l_arr_strProcessID, l_arr_strProcessIDCombinations, l_arr_strDeactivatedStartProcessID, l_arr_strMandatoryStopProcess, t_intSelectedIndexSTART, t_intSelectedIndexSTOP, t_arrBlnProcessActivation);
  NGSSTARLOADING::Display_InputWorklist_Dialog(l_strFileInputWorklist);
  Trace ("Selected input worklist :", l_strFileInputWorklist);
  t_arrSamplePositionIDs.SetSize(0);
  t_arrIndex1PositionIDs.SetSize(0);
  t_arrIndex1IDs.SetSize(0);
  t_arrIndex2PositionIDs.SetSize(0);
  t_arrIndex2IDs.SetSize(0);
  NGSSTARLOADING::Read_InputWorklist_ExcelOrCSVFormat(l_strFileInputWorklist, ML_STAR.HSP_Pipette2, t_intNumberOfSamplesFromFile, l_intIndexSettingsDoubleOrSingleIndexing, t_arrIndex1PositionIDs, t_arrIndex1IDs, t_arrIndex2PositionIDs, t_arrIndex2IDs, t_arrAdapterLigatioPlateLabwareID, t_arrAdapterLigationPlatePositionIDs, l_strIndexLabwareFormat);
  l_intDialogID = 1;
  NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Is the ODTC Module used in this run?"), Translate("YES"));
  NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Is the ODTC Module used in this run?"), Translate("NO"));
  NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(l_intDialogID);
  NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Is the ODTC Module used in this run?"), l_int_OptionSelected);
  if (l_int_OptionSelected == 1)
  {
    t_blnODTCused = ASWGLOBAL::BOOL::TRUE;
    l_intDialogID = 2;
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Store HSP over night at the end of the method?"), Translate("Store HSP over night at room temperature"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Store HSP over night at the end of the method?"), Translate("Store HSP over night at 12 °C"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Store HSP over night at the end of the method?"), Translate("Do not store HSP over night."));
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(l_intDialogID);
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Store HSP over night at the end of the method?"), l_int_OptionSelected);
    if (l_int_OptionSelected == 3)
    {
      t_blnStoreHSPoverNightWithinODTC = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      t_blnStoreHSPoverNightWithinODTC = ASWGLOBAL::BOOL::TRUE;
      if (l_int_OptionSelected == 1)
      {
        t_blnStoreAtRoomTemperature = ASWGLOBAL::BOOL::TRUE;
      }
      if (l_int_OptionSelected == 2)
      {
        t_blnStoreAtRoomTemperature = ASWGLOBAL::BOOL::FALSE;
      }
    }
  }
  else
  {
    t_blnODTCused = ASWGLOBAL::BOOL::FALSE;
    t_blnStoreHSPoverNightWithinODTC = ASWGLOBAL::BOOL::FALSE;
  }
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_intDialogID = 3;
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      l_int_PCRCycleCounter = 2;
      l_int_IndexElement = 2;
      {
        for(l_int_LoopCounter1 = 0; l_int_LoopCounter1 < 15;)
        {
          l_int_LoopCounter1 = l_int_LoopCounter1 + 1;
          l_int_PCRCycleCounter = l_int_PCRCycleCounter + 1;
          l_str_PCRCycleCounter = StrIStr(l_int_PCRCycleCounter);
          NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Select Number of PCR Cycles"), l_str_PCRCycleCounter);
        }
      }
    }
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Input Index Format"), Translate("HSP Index Plate + Vial i5"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Input Index Format"), Translate("HSP Double Index Plate"));
  }
  if (t_intSelectedIndexSTART != 4)
  {
    if (t_intSelectedIndexSTOP >= 3)
    {
      NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(l_intDialogID);
    }
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    t_strPCRProgramODTC = Translate("NEB_DNA_PCRCycles");
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Select Number of PCR Cycles"), l_int_OptionSelected);
      l_int_PCRCycleCounter = 2;
      l_int_PCRCycleCounter = l_int_PCRCycleCounter + l_int_OptionSelected;
      t_strPCRProgramODTC = StrConcat4(t_strPCRProgramODTC, l_int_PCRCycleCounter, Translate(""), Translate(""));
      Trace ("t_strPCRProgramODTC :   ",t_strPCRProgramODTC);
    }
  }
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Input Index Format"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      g_bln_IndexesOnPlate = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      if (l_int_OptionSelected == 2)
      {
        g_bln_IndexesOnPlate = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        g_bln_IndexesOnPlate = ASWGLOBAL::BOOL::FALSE;
      }
    }
  }
  t_blnUse80PercentBeadVolumeAtProcess5 = ASWGLOBAL::BOOL::TRUE;
  if(0){
    NGSSTARLOADING::Display_SelectEmailAddress_Dialog(t_strEmailAdress);
    l_intLengthEmailAddress = StrGetLength(t_strEmailAdress);
    if (l_intLengthEmailAddress > 0)
    {
      t_blnSendEmails = ASWGLOBAL::BOOL::TRUE;
    }
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnTestODTCWithShortDummyProtocol == ASWGLOBAL::BOOL::TRUE)
    {
      t_strODTCFolderXML = StrConcat2(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\UltraIIDNALibraryPrepKit_For_RNAWorkflows\Files\ODTC_scripts"), Translate("\NEBNextDNA_shortGINIT.xml"));
    }
    else
    {
      t_strODTCFolderXML = StrConcat2(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\UltraIIDNALibraryPrepKit_For_RNAWorkflows\Files\ODTC_scripts"), Translate("\NEBNextDNA_GINIT.xml"));
    }
    NGSSTARPREP::ODTC_DownloadProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_intSelectedIndexSTART == 1)
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_DNA_Init_Block20CLid85C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
    if (t_intSelectedIndexSTART == 2)
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_DNA_Init_Block20CLid40C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
    if (t_intSelectedIndexSTART == 3)
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_DNA_Init_110C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
  }
}

private function Process1_EndPrepcDNALibrary(  ) void {
  private variable l_blnPCRcompleted;
  private variable l_strReadCurrentBarcode;
  private variable l_intReturnValue_ExternalThermalCycling;
  private variable l_arrListExternalThermalCyclingMessage[];
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process1_EndPrepcDNALibrary********************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process 1: End Prep of cDNA Library"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 1: End Prep of cDNA Library"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM2, t_intRequiredNumberOf300uLTipsM2, t_intRequiredNumberOf1000uLTipsM2, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_EndPrepMastermix, t_seqHSP_Pipette2, t_fltVolumeEndPrepMastermix, Translate("NEBNext_DNA_II_50F_EndPreparation_MasterMix"), 10, 0, 45, 1.3, 0.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_DNA_EndPrepcDNALibrary"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    if (t_intSelectedIndexSTOP == 2)
    {
      if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
      }
      else
      {
        NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
        SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
      }
    }
    else
    {
      NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
    }
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_DNA_Reset4Cto20CLid30C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
  }
  else
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Incubate the sample in a preheated thermocycler with the heated lid set at = 80°C as stated for the First Strand Synthesis"));
    }
    l_blnPCRcompleted = 0;
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("External library amplification."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Wait until you finished the End Prep of cDNA Library:"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please put the processed plate from the thermocycler to the unloaded carrier at the FOURTH position. "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 1: End Prep of cDNA Library is completed"), ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: Process1_EndPrepcDNALibrary********************"));
}

private function Process2_AdapterLigationAndCleanUp(  ) void {
  private variable l_blnPCRcompleted;
  private variable l_strReadCurrentBarcode;
  private variable l_strReadBarcode;
  private variable l_intReturnValue_ExternalThermalCycling;
  private variable l_arrListExternalThermalCyclingMessage[];
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process2_AdapterLigationAndCleanUp********************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process 2: Adapter Ligation and Clean UP"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 2: Adapter Ligation and Clean Up"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM3, t_intRequiredNumberOf300uLTipsM3, t_intRequiredNumberOf1000uLTipsM3, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_DilutedAdapter, t_seqHSP_Pipette2, t_fltVolumeDilutedAdapter_Process03, Translate("NEBNext_DNA_II_50F_DilutedAdapter_SurfaceEmpty"), 2, 0, 5, 0, 1.3, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_LigationMastermix, t_seqHSP_Pipette2, t_fltVolumeLigationMastermix, Translate("NEBNext_DNA_II_SVF_AdaptorLigationMasterMix_SurfaceEmpty"), 10, 0, 80, 0, 1.3, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_DNA_AdaptorLigation"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_DNA_Reset20CLid30Cto57C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
  }
  else
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Incubate the sample in a preheated thermocycler with the heated lid set at = 80°C as stated for the First Strand Synthesis"));
    }
    l_blnPCRcompleted = 0;
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("External library amplification."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Wait until you have finished the first incubation (20°C) for the adapter ligation."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please put the processed plate from the thermocycler to the unloaded carrier at the FOURTH position. "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_UserEnzyme, t_seqHSP_Pipette2, t_fltVolumeUserEnzyme, Translate("NEBNext_DNA_II_50F_UserEnzyme_SurfaceEmpty"), 5, 0, 50, 0, 1.3, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_DNA_USEREnzymeIncubation"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    if (t_intSelectedIndexSTOP >= 3)
    {
      NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
    }
    else
    {
      if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
      }
      else
      {
        NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
        SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
      }
    }
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_DNA_Reset37Cto20CLid57Cto110C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
  }
  else
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Incubate the sample in a preheated thermocycler with the heated lid set at = 80°C as stated for the First Strand Synthesis"));
    }
    l_blnPCRcompleted = 0;
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("External library amplification."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Wait until you finished the User Enzyme incubation (37°C for 15 minutes) for the Adapter ligation:"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please put the processed plate from the thermocycler to the unloaded carrier at the FOURTH position. "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_seqMIDI_Pipette, 0, 1, l_strReadBarcode, 4);
    SeqIncrement(t_trp_Stack1, 1);
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, 96.5, Translate("NEBNext_DNA_II_SVF_MPH_AdaptorLigationMasterMix_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 0.8, 1);
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_seqHSP_Pipette2, t_trpHSP_Waste, 0, ASWGLOBAL::BOOL::FALSE, l_strReadBarcode, 4);
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette, t_trpHHS3_MIDI, 0, ASWGLOBAL::BOOL::FALSE, l_strReadBarcode, 4);
  }
  else
  {
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpHHS3_MIDI, 0, 1, l_strReadBarcode, 4);
    SeqIncrement(t_trp_Stack1, 1);
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2, t_seqHHS3_MIDI, 96.5, Translate("NEBNext_DNA_II_SVF_AdaptorLigationMasterMix_SurfaceEmpty"), 0, 0, 0, 0.8, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_seqHSP_Pipette2, t_trpHSP_Waste, 0, ASWGLOBAL::BOOL::FALSE, l_strReadBarcode, 4);
  }
  MECC::TraceComment(Translate("NO SIZE SELECTION HAS BEEN CHOOSEN WITHIN MAIN GUI"));
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::Process_CleanUp_MPH(ML_STAR, t_seqAspirate_AMPureBeads, t_seqAspirate_AMPureBeads, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.MPH_waste, t_seqAspirate_TEBuffer, 200, t_fltVolumeAMPureBeads02_Process03, t_fltVolumeTEBuffer_Process03, t_fltDiscardSupernatant_M3, Translate("NEBNext_DNA_II_SVF_Ampure_SurfaceEmpty"), Translate("NEBNext_DNA_II_SVF_Ampure_SurfaceEmpty_FastMix"), Translate("NEBNext_DNA_II_HVF_80PercentEtOH_JetPart"), Translate("NEBNext_DNA_II_SVF_MPH_RSB_SurfaceEmpty"), Translate("NEBNext_DNA_II_SVF_MPH_SupernatantToWaste_JetEmpty"), Translate("NEBNext_DNA_II_SVF_MPH_EthanolToWaste_JetEmpty"), 1400, 1600, 60, 60, t_intHHS3_HSP3_MIDI3, 600, 300, 300, 120, 300, t_intNumberOfSamplesFromFile);
  }
  else
  {
    NGSSTARPROCESSES::Process_CleanUp(ML_STAR, t_seqAspirate_AMPureBeads, t_seqAspirate_AMPureBeads, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqAspirate_TEBuffer, 200, t_fltVolumeAMPureBeads02_Process03, t_fltVolumeTEBuffer_Process03, t_fltDiscardSupernatant_M3, Translate("NEBNext_DNA_II_SVF_Ampure_SurfaceEmpty"), Translate("NEBNext_DNA_II_SVF_Ampure_SurfaceEmpty_FastMix"), Translate("NEBNext_DNA_II_HVF_80PercentEtOH_JetPart"), Translate("NEBNext_DNA_II_SVF_RSB_SurfaceEmpty"), Translate("NEBNext_DNA_II_SVF_SupernatantToWaste_JetEmpty"), Translate("NEBNext_DNA_II_SVF_EthanolToWaste_JetEmpty"), 1400, 1600, 120, 120, 12, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::TRUE, 600, 300, 300, 120, 300);
  }
  MECC::TraceComment(Translate("************* Now transferring clean sample to new HSP .............."));
  VectorCustomDialogs::AppendStatusText(Translate("   Transferring clean sample to HSP..."));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode, 4);
  SeqIncrement(t_trp_Stack4, 1);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltVolumeTEBuffer_Process03, Translate("NEBNext_DNA_II_50F_Water_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 1.2, 1);
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, 15, Translate("NEBNext_DNA_II_50F_CleanSample_SurfaceEmpty"), 0, 0, 0, 0.8, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process2_AdapterLigationAndCleanUp is completed"), ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: Process2_AdapterLigationAndCleanUp********************"));
}

private function Process3_PCREnrichementOfAdapterLigatedDNA(  ) void {
  private variable l_blnPCRcompleted;
  private variable l_strReadCurrentBarcode;
  private variable l_intReturnValue_ExternalThermalCycling;
  private variable l_arrListExternalThermalCyclingMessage[];
  private variable l_intReturnValue_LoadingPrimer;
  private variable l_arrListPrimerLoadingMessage[];
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  Process4_PCREnrichementOfAdapterLigatedDNA************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process 3: PCR Enrichment of Adaptor Ligated DNA"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 3: PCR Enrichment of Adaptor Ligated DNA"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM4, t_intRequiredNumberOf300uLTipsM4, t_intRequiredNumberOf1000uLTipsM4, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if (t_blnPostponedPrimerLoading == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    l_arrListPrimerLoadingMessage.SetSize(0);
    l_arrListPrimerLoadingMessage.AddAsLast(Translate("Primer plate."));
    l_arrListPrimerLoadingMessage.AddAsLast(Translate(" "));
    if (t_str_PlatformUsed == "ClinicalNGSStarlet")
    {
      l_arrListPrimerLoadingMessage.AddAsLast(Translate("Please put the HSP96 plate to the unloaded carrier at the Fourth position. "));
    }
    if (t_str_PlatformUsed == "NGSStar")
    {
      if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::FALSE)
      {
        l_arrListPrimerLoadingMessage.AddAsLast(Translate("Please put the HSP96 plate to the unloaded carrier at the THIRD position. "));
      }
      else
      {
        l_arrListPrimerLoadingMessage.AddAsLast(Translate("Please put the HSP96 plate to the HHS-HSP pipette carrier at the third position. "));
      }
    }
    if(0){
      l_arrListPrimerLoadingMessage.AddAsLast(Translate("Please put the HSP96 plate to the unloaded carrier at the THIRD position. "));
    }
    l_arrListPrimerLoadingMessage.AddAsLast(Translate(" "));
    l_arrListPrimerLoadingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_LoadingPrimer = VectorCustomDialogs::ListDialog(Translate("Loading Primer plate"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListPrimerLoadingMessage);
    if (l_intReturnValue_LoadingPrimer == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
  }
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_Q5Mastermix, t_seqHSP_Pipette2, t_fltVolumeQ5Mastermix, Translate("NEBNext_DNA_II_50F_Q5Polymerase_SurfaceEmpty"), 4, 0, 20, 0, 1.3, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  if (g_bln_IndexesOnPlate == ASWGLOBAL::BOOL::FALSE)
  {
    MECC::TraceComment(Translate("adding i5 and i7 primers seperately from a vial and a plate - 5ul each"));
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_UniversalPrimer, t_seqHSP_Pipette2, t_fltVolumeUniversalPrimer, Translate("NEBNext_DNA_II_50F_PcrUniversalPrimer_SurfaceEmpty"), 4, 0, 25, 0, 1.3, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette, t_seqHSP_Pipette2, 5, Translate("NEBNext_DNA_II_50F_Adapters_SurfaceEmpty"), 5, 0, 35, 0.7, 1.6, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    MECC::TraceComment(Translate("adding i5 and i7 primers combined from a plate - 10ul"));
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette, t_seqHSP_Pipette2, t_fltVolumeUniversalPrimer, Translate("NEBNext_DNA_II_50F_Adapters_SurfaceEmpty"), 5, 0, 35, 0.7, 1.6, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, t_strPCRProgramODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
      SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
    }
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
  }
  else
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Incubate the sample in a preheated thermocycler with the heated lid set at = 80°C as stated for the First Strand Synthesis"));
    }
    l_blnPCRcompleted = 0;
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("PCR Enrichment of Adaptor Ligated DNA."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Wait until you finished the PCR Enrichment of Adaptor Ligated DNA :"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please put the processed plate from the thermocycler to the unloaded carrier at the FOURTH position. "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process3_PCREnrichementOfAdapterLigatedDNA is completed"), ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: Process3_PCREnrichementOfAdapterLigatedDNA********************"));
}

private function Process4_PurificationOfDNA(  ) void {
  private variable l_strReadCurrentBarcode;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  Process4_PurificationOfDNA********************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process 4: Purification of the PCR Reaction using SPRIselect Beads or NEBNext Sample Purification Beads"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 4: Purification of the PCR Reaction using SPRIselect Beads or NEBNext Sample Purification Beads"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM5, t_intRequiredNumberOf300uLTipsM5, t_intRequiredNumberOf1000uLTipsM5, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpMIDI_Pipette, 0, 1, l_strReadCurrentBarcode, 4);
    SeqIncrement(t_trp_Stack1, 1);
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, 50, Translate("NEBNext_DNA_II_50F_MPH_CleanSample_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 0.8, 0.7);
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_Waste, 0, 1, l_strReadCurrentBarcode, 4);
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_seqMIDI_Pipette, t_trpHHS3_MIDI, 0, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    NGSSTARPROCESSES::Process_CleanUp_MPH(ML_STAR, t_seqAspirate_AMPureBeads, t_seqAspirate_AMPureBeads, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.MPH_waste, t_seqAspirate_TEBuffer, 200, t_fltVolumeAMPureBeads01_Process05, t_fltVolumeTEBuffer_Process05, t_fltDiscardSupernatant_M5, Translate("NEBNext_DNA_II_SVF_Ampure_SurfaceEmpty"), Translate("NEBNext_DNA_II_SVF_Ampure_SurfaceEmpty_FastMix"), Translate("NEBNext_DNA_II_HVF_MPH_80PercentEtOH_JetPart"), Translate("NEBNext_DNA_II_SVF_MPH_RSB_SurfaceEmpty"), Translate("NEBNext_DNA_II_SVF_MPH_SupernatantToWaste_JetEmpty"), Translate("NEBNext_DNA_II_SVF_MPH_EthanolToWaste_JetEmpty"), 1600, 1600, 120, 120, t_intHHS3_HSP3_MIDI3, 300, 300, 300, 120, 300, t_intNumberOfSamplesFromFile);
  }
  else
  {
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
    SeqIncrement(t_trp_Stack1, 1);
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2, t_seqHHS3_MIDI, 50, Translate("NEBNext_DNA_II_50F_CleanSample_SurfaceEmpty"), 0, 0, 0, 0.8, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_Waste, 0, 1, l_strReadCurrentBarcode, 4);
    NGSSTARPROCESSES::Process_CleanUp(ML_STAR, t_seqAspirate_AMPureBeads, t_seqAspirate_AMPureBeads, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqAspirate_TEBuffer, 200, t_fltVolumeAMPureBeads01_Process05, t_fltVolumeTEBuffer_Process05, t_fltDiscardSupernatant_M5, Translate("NEBNext_DNA_II_SVF_Ampure_SurfaceEmpty"), Translate("NEBNext_DNA_II_SVF_Ampure_SurfaceEmpty_FastMix"), Translate("NEBNext_DNA_II_HVF_80PercentEtOH_JetPart"), Translate("NEBNext_DNA_II_SVF_RSB_SurfaceEmpty"), Translate("NEBNext_DNA_II_SVF_SupernatantToWaste_JetEmpty"), Translate("NEBNext_DNA_II_SVF_EthanolToWaste_JetEmpty"), 1600, 1600, 120, 120, 12, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::TRUE, 300, 300, 300, 120, 300);
  }
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_seqHSP_Pipette2, 0, 1, l_strReadCurrentBarcode, 4);
  SeqIncrement(t_trp_Stack4, 1);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, 20, Translate("NEBNext_DNA_II_50F_MPH_CleanSample_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 1.2, 0.7);
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, 20, Translate("NEBNext_DNA_II_50F_CleanSample_SurfaceEmpty_2"), 0, 0, 0, 0.8, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process4_PurificationOfDNA is completed"), ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: Process4_PurificationOfDNA********************"));
}

private function ProcessX_StoreHSPWithinODTCOverNight( sequence & i_trpHSP, variable i_blnIncubateODTCWithoutActiveCooling ) void {
  private variable l_strReadCurrentBarcode;
  private variable l_strSequenceName;
  private variable l_strODTCMessage;
  private variable l_intODTCStorageCycle;
  private variable l_retValueDialog;
  private variable l_strODTCFolderXML;
  private variable l_arrODTCStorageListInformation[];
  private variable l_blnRetrievePlateFromODTC;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  ProcessX_StoreHSPWithinODTCOverNight********************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process X: Storing the HSP within ODTC over night."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process X: Storing the HSP within ODTC over night."), ASWGLOBAL::BOOL::YES);
  l_strODTCFolderXML = Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\UltraIIDNALibraryPrepKit_For_RNAWorkflows\Files\ODTC_scripts\StorePlateOverNight.xml");
  l_blnRetrievePlateFromODTC = ASWGLOBAL::BOOL::FALSE;
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    {
      l_intODTCStorageCycle = 0;
      while (1 == 1)
      {
        l_intODTCStorageCycle = l_intODTCStorageCycle + 1;
        if (l_intODTCStorageCycle == 1)
        {
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
          NGSSTARPREP::ODTC_DownloadProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML);
          NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
          NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, i_trpHSP, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
          Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
          NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
          NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
          if (i_blnIncubateODTCWithoutActiveCooling == ASWGLOBAL::BOOL::TRUE)
          {
            MECC::TraceComment(Translate("NO ODTC protocol will be activated."));
          }
          else
          {
            NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, Translate("Init_20CLid30C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
            NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
            NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, Translate("StorePlate12degrees"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
          }
        }
        l_arrODTCStorageListInformation.SetSize(0);
        l_strODTCMessage = StrConcat2(Translate("ODTC - 2 hours cycle number : "), l_intODTCStorageCycle);
        l_arrODTCStorageListInformation.AddAsLast(l_strODTCMessage);
        l_strSequenceName = SeqGetName(i_trpHSP);
        l_strODTCMessage = StrConcat2(Translate("Retrieving the plate to following sequence : "), l_strSequenceName);
        l_arrODTCStorageListInformation.AddAsLast(l_strODTCMessage);
        l_arrODTCStorageListInformation.AddAsLast(Translate("Press OK to retrieve the HSP from ODTC."));
        l_retValueDialog = VectorCustomDialogs::ListDialog(Translate("ODTC long time storage."), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::Ok, 0, 0, 7200, Translate(""), Translate("This procedure will prolong itself each 2 hours automatically. Press YES to retrieve HSP."), l_arrODTCStorageListInformation);
        Trace("l_retValueDialog : ",l_retValueDialog);
        if (t_blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
        {
          l_retValueDialog = VectorCustomDialogs::MessageDialog(Translate("Simulation mode ODTC cycles"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Press YES to quit endless loop. Press NO to add an additional ODTC storage cycle."));
          if (l_retValueDialog == ASWGLOBAL::DIALOG::YES)
          {
            l_blnRetrievePlateFromODTC = ASWGLOBAL::BOOL::TRUE;
          }
        }
        else
        {
          if (l_retValueDialog == ASWGLOBAL::DIALOG::OK)
          {
            l_blnRetrievePlateFromODTC = ASWGLOBAL::BOOL::TRUE;
          }
        }
        if (l_blnRetrievePlateFromODTC == ASWGLOBAL::BOOL::TRUE)
        {
          if (i_blnIncubateODTCWithoutActiveCooling == ASWGLOBAL::BOOL::FALSE)
          {
            NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
          }
          NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
          NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
          SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
          NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, i_trpHSP, 0, 1, l_strReadCurrentBarcode);
          NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
          break;
        }
      }
    }
    if (i_blnIncubateODTCWithoutActiveCooling == ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, Translate("Init_20CLid30C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
      NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, Translate("Dehumidify block"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
      NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
      NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    }
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: ProcessX_StoreHSPWithinODTCOverNight********************"));
}
