#pragma once
#include "HSLSeqLib.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLMthLib.hsl"
#include "VirtualLabware\\VirtualLabware.hsl"
#include "HSLTrcLib.hsl"
#include "SMT\\MLSTARLiquidClassLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLTipCountingLib.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLTimLib.hsl"
#include "HslHamHeaterShakerLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLDevLib.hsl"
#include "SMT_LabwareProperties_v1.31\\Labware_Properties.hs_"
#include "HSLExtensions\\Array.hsl"
#include "HSLFilLib.hsl"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "HSLErrLib.hsl"
#include "Aliquot\\Aliquot_for_EasySteps v2.hs_"
#include "HSLUtilLib.hsl"
#include "STAR Tools\\STAR MPH96 Tools.hs_"
#include "STAR Tools\\STAR Channel Tools.hs_"
#include "STAR Tools\\STAR Tip Tools.hs_"
#include "ArrayTools\\ArrayTools.hs_"
#include "Create Channel Pattern.hs_"
#include "HSLExtensions\\Sequence.hsl"
#include "RemoveTextDelimiters\\RemoveTextDelimitersFromAsciiTextFile.hsl"
#include "HSLExtensions\\File.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\\Library\\NGSStarLoading\\ARW_Global.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLSTCCLib.hs_"

namespace NGSSTARPROCESSES {
  variable t_blnDeactivatePipettingStepsForTransportTests;
  variable t_blnInsuffientTips;
  variable t_blnSimulationModeON;
  variable t_intConsumedTips1000;
  variable t_intConsumedTips300;
  variable t_intConsumedTips50;
  variable t_intMaxSeqTips1000AfterEdit;
  variable t_intMaxSeqTips300AfterEdit;
  variable t_intMaxSeqTips50AfterEdit;
  variable t_intStartPositionTip1000;
  variable t_intStartPositionTip300;
  variable t_intStartPositionTip50;
  variable t_intTotalConsumedTips1000;
  variable t_intTotalConsumedTips300;
  variable t_intTotalConsumedTips50;
  variable t_intTransportTool;
  variable t_strFullPathReportFile;
  timer t_hdlProccessTimer;
  variable t_strTipCounterNameTip1000;
  variable t_strTipCounterNameTip300;
  sequence t_seqTips1000;
  sequence t_seqTips300;
  sequence t_seqTips50;
  variable t_strRecipientEmailAdress;
  variable t_strTipCounterNameTip50;
  variable t_blnDeactivateEmailFunctions;
  variable t_strChannelpattern;
  variable t_intNumberOfAllAvailableChannels;
  variable t_strTransportChannelpattern;
  variable t_intScheduledNumberOfHVFTExtra;
  variable t_intScheduledNumberOfHamiltonComfortLid;
  variable t_intScheduledNumberOfSVFTPerSample;
  variable t_intScheduledNumberOfHSP;
  variable t_intScheduledNumberOfMIDI;
  variable t_intScheduledNumberOfLVFTExtra;
  variable t_intScheduledNumberOfHVFTPerSample;
  variable t_intScheduledNumberOfSVFTExtra;
  variable t_intScheduledNumberOfLVFTPerSample;
  variable t_intGetTotalSequenceDispense;
  sequence t_seqTipSupport;
  sequence t_seqCOREGripper;
  variable t_intTiptypePreloadedAtSupportBlock;
  variable t_intFrontChannelCORETransport;
  variable t_blnLockUnlockSystem;
  global variable g_strFullPathReportFile;
  sequence t_arrTipAdapters[];
  variable t_blnClinicalNGSStarlet;
  variable t_intConsumedTips300BeforeRelaodTips;
  variable t_intConsumedTips50BeforeRelaodTips;
  variable t_intConsumedTips1000BeforeRelaodTips;
  variable t_blnReduceTip1000sequence;
  variable t_strKitName;
  variable t_strKitProvider;
  private function Abstract(  ) void ;
  function DATA_CheckPlatesInStacks( device & ML_STAR, sequence & i_seqStack1, sequence & i_seqStack2, sequence & i_seqStack3, sequence & i_seqStack4, variable i_intStack1ExpectedNumberOfPlates, variable i_intStack2ExpectedNumberOfPlates, variable i_intStack3ExpectedNumberOfPlates, variable i_intStack4ExpectedNumberOfPlates, variable & o_intResultCheckOfFalseLoading, variable & o_strMessageResult ) void ;
  function DATA_CheckPlatesInStacks_TeachingNeedles( device & ML_STAR, sequence & io_seqStack1, sequence & io_seqStack2, sequence & io_seqStack3, sequence & io_seqStack4, variable i_intStack1ExpectedNumberOfPlates, variable i_intStack2ExpectedNumberOfPlates, variable i_intStack3ExpectedNumberOfPlates, variable i_intStack4ExpectedNumberOfPlates, variable i_fltStack1OffsetOfContainerRim, variable i_fltStack2OffsetOfContainerRim, variable i_fltStack3OffsetOfContainerRim, variable i_fltStack4OffsetOfContainerRim, variable & o_intResultCheckOfFalseLoading, variable & o_strMessageResult ) void ;
  function DATA_CreateNewSequencesOrTransportSequences( sequence i_sequenceTemplate, variable & i_arrPositionIDs[], sequence & o_seqCreated, variable i_intSequenceType ) void ;
  function DATA_HandoverSequencesAndDataToSMT( device & ML_STAR, variable i_intTransportTool, variable i_strKitProvider, variable i_strKitName, variable i_blnDeactivatePipettingStepsForTransportTests, variable i_blnReduceChannelpatternFrom8To4, variable i_strEmailAdress, variable i_blnLockUnlockSystem, variable & o_strFullPathReportFile, sequence & o_arrTipAdapters[], variable i_blnUseMPH ) void ;
  function DATA_IncubationTimer( timer & i_strIncubationTimerName, variable i_intTime, variable i_intTimerMode ) void ;
  function DATA_SendEmail( variable i_strSubject, variable i_strMessage ) void ;
  function DATA_ShowArrayProperties( variable & i_arrayToBeAnalyzed[], variable i_intPresentationMode ) void ;
  function DATA_ShowSequenceProperties( sequence & i_seqCheckSequence, variable i_intPresentationMode ) void ;
  function DATA_ShowVariableProperties( variable i_strVariableName, variable i_varVariable, variable i_intPresentationMode ) void ;
  function DATA_TipCounterRead( device & ML_STAR, variable i_intNumberOfTip50_required, variable i_intNumberOfTip300_required, variable i_intNumberOfTip1000_required, variable i_intTipTypeToBeProcessed, variable i_blnAlwaysEditTipcounter, variable i_blnShowGUITipAndTimeCalculation ) void ;
  function DATA_TipCounterWrite( device & ML_STAR ) void ;
  function DATA_UpdateInformationIntoReportFile( variable i_strInformationToUpdateReportList, variable i_blnUpdateInformationToStatusWindow ) void ;
  function PIP_CheckForSufficientVolumeIn50mlTroughs( device & ML_STAR, variable & i_arr_strReagentNames[], variable & i_arr_fltReagentVolumes[], sequence & i_arr_seqAspirateReagents[], variable & o_bln_RefillContainers ) void ;
  function PIP_CleanUpTipAdapter( device & ML_STAR, variable i_blnStoreTipsToOriginalSequence ) void ;
  function PIP_DefragmentTipRacks( device & ML_STAR ) void ;
  function PIP_MPH_ReagentsfromPlatetoPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intNumberOfSamples, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom ) void ;
  function PIP_MPH_Supernatant_SVFT_SingleDispenseFromPlateToWaste( device & ML_STAR, sequence & i_seqAspirationPosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intNumberOfSamples ) void ;
  function PIP_MixOnly( device & ML_STAR, sequence i_seqAspirationPosition, variable i_fltAspirateHeightFromBottom, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltMixingVolume ) void ;
  function PIP_ReagentsFromTubeOrTroughOrPlataToPlate_pLLD( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltDispenseHeightFromBottom, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtDispenseOnFixHeight ) void ;
  function PIP_ReagentsFromTubeOrTroughOrPlateToPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtDispenseOnFixHeight ) void ;
  function PIP_ReagentsFromTubeOrTroughOrPlateToPlateWithVolumeArray( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable & i_arrFltVolume[], variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtDispenseOnFixHeight ) void ;
  function PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer ) void ;
  function Process_CleanUp( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, sequence & i_seqPositionHHS, sequence & i_seqAspirationPositionEthanol, sequence & i_seqMagneticStandPosition, sequence & i_seqLiquidWaste, sequence & i_seqAspirationPositionResuspensionBuffer, variable i_fltVolumeEthanol, variable i_fltVolumeBeads, variable i_fltVolumeResuspensionBuffer, variable i_fltVolumeSupernatantToWaste, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMixing, variable i_strLiquidClassEthanol, variable i_strLiquidClassResuspensionBuffer, variable i_strLiquidClassSupernatantToWaste, variable i_strLiquidClassEthanolToWaste, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerDurationResuspendCleanedLibrary, variable i_intNumberOfColumnsWithinOneBatch, variable i_intShakerDevice, variable i_blnActivateBatchProcessForScaleUp, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver ) void ;
  function Process_CleanUp_HSP( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, sequence & i_seqPositionHHS, sequence & i_seqAspirationPositionEthanol, sequence & i_seqMagneticStandPosition, sequence & i_seqLiquidWaste, sequence & i_seqAspirationPositionResuspensionBuffer, sequence & i_seqIntermediateHSPPosition, sequence & i_seqPositionHHS_HSP, sequence & i_seqMIDIwaste, variable i_fltVolumeEthanol, variable i_fltVolumeBeads, variable i_fltVolumeResuspensionBuffer, variable i_fltVolumeSupernatantToWaste, variable i_fltVolumeTransferMIDItoHSPIntermediate, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMixing, variable i_strLiquidClassEthanol, variable i_strLiquidClassResuspensionBuffer, variable i_strLiquidClassSupernatantToWaste, variable i_strLiquidClassEthanolToWaste, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerDurationResuspendCleanedLibrary, variable i_intNumberOfColumnsWithinOneBatch, variable i_intShakerDevice, variable i_blnActivateBatchProcessForScaleUp, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver ) void ;
  function Process_CleanUp_MPH( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, sequence & i_seqPositionHHS, sequence & i_seqAspirationPositionEthanol, sequence & i_seqMagneticStandPosition, sequence & i_seqLiquidWaste, sequence & i_seqAspirationPositionResuspensionBuffer, variable i_fltVolumeEthanol, variable i_fltVolumeBeads, variable i_fltVolumeResuspensionBuffer, variable i_fltVolumeSupernatantToWaste, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMixing, variable i_strLiquidClassEthanol, variable i_strLiquidClassResuspensionBuffer, variable i_strLiquidClassSupernatantToWasteMPH, variable i_strLiquidClassEthanolToWasteMPH, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerDurationResuspendCleanedLibrary, variable i_intShakerDevice, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver, variable i_intInputNumberOfSamples ) void ;
  function Process_MixAndAddReagentInBatches( device & ML_STAR, sequence & i_seqDispensePlatePosition, sequence & i_seqAspirationPositionReagent, variable i_fltVolumeReagent, variable i_strLiquidClassReagent, variable i_strLiquidClassMix, variable i_intMixCyclesUponMixOnly, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirationHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnIncrementAspirationReagentSequence, variable i_intNumberOfColumnsWithinOneBatch, variable i_blnActivateLiquidFollowingDuringDispenseOnFixHeight, variable i_blnTipExchangeDuringDispenseOfReagents ) void ;
  function Process_RemoveSupernatantAndAddReagentInBatches( device & ML_STAR, sequence & i_seqDispensePlatePosition, sequence & i_seqAspirationPositionReagent, sequence & i_seqLiquidWaste, variable i_fltVolumeReagent, variable i_fltVolumeSupernatantToWaste, variable i_strLiquidClassReagent, variable i_strLiquidClassSupernatantToWaste, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirationHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnIncrementAspirationReagentSequence, variable i_intNumberOfColumnsWithinOneBatch, variable i_blnActivateLiquidFollowingDuringDispenseOnFixHeight, variable i_blnTipExchangeDuringDispenseOfReagents ) void ;
  function Process_ShakeAndTransferSamplesInBatches( device & ML_STAR, sequence & i_seqDispensePlatePosition, sequence & i_seqAspirationPlatePosition, variable i_fltVolumeReagent, variable i_strLiquidClassReagent, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirationHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_intNumberOfColumnsWithinOneBatch, variable i_intHHS, variable i_intSpeed, variable i_intShakingDuration, variable i_blnIncrementAspirationReagentSequence, variable i_blnActivateLiquidFollowingDuringDispenseOnFixHeight, variable i_blnTipExchangeDuringDispenseOfReagents ) void ;
  function Process_SizeSelection( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, sequence & i_seqLiquidWaste, sequence & i_seqPositionHHS, sequence & i_seqTransferPositionNewMidiPlate, sequence & i_seqAspirationPositionEthanol, sequence & i_seqAspirationPositionResuspensionBuffer, sequence & i_seqMagneticStandPosition, sequence & i_trpPositionMIDIWaste, variable i_strLiquidClassResuspensionBuffer, variable i_strLiquidClassEthanol, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMixing, variable i_fltVolumeTransferSupernatantDuringSizeSelection, variable i_fltVolumeEthanol, variable i_fltVolumeBeadsFirstSeparation, variable i_fltVolumeBeadsSecondSeparation, variable i_fltVolumeResuspensionBuffer, variable i_intShakerDevice, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationResuspendCleanedLibrary, variable i_blnActivateBatchProcessForScaleUp, variable i_intNumberOfColumnsWithinOneBatch, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver ) void ;
  function Process_SizeSelection_MPH( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, sequence & i_seqLiquidWaste, sequence & i_seqPositionHHS, sequence & i_seqTransferPositionNewMidiPlate, sequence & i_seqAspirationPositionEthanol, sequence & i_seqAspirationPositionResuspensionBuffer, sequence & i_seqMagneticStandPosition, sequence & i_trpPositionMIDIWaste, variable i_strLiquidClassSupernatantToWasteMPH, variable i_strLiquidClassResuspensionBuffer, variable i_strLiquidClassEthanol, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMPH, variable i_strLiquidClassBeadsMixing, variable i_fltVolumeTransferSupernatantDuringSizeSelection, variable i_fltVolumeEthanol, variable i_fltVolumeBeadsFirstSeparation, variable i_fltVolumeBeadsSecondSeparation, variable i_fltVolumeResuspensionBuffer, variable i_intShakerDevice, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationResuspendCleanedLibrary, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver, variable i_intInputNumberOfSamples ) void ;
  function Trp_HSP( device & ML_STAR, sequence & i_seqHSPStartingPosition, sequence & i_seqHSP_Destination, variable i_intTrackNumberToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode, variable i_intGripModeISWAP ) void ;
  function Trp_HSPDownholder( device & ML_STAR, sequence & i_seqDownholderSourcePosition, sequence & i_seqDownholderDestinationPosition, variable i_blnParkTransportToolAfterMove, variable i_blnDownholderSourcePositionIsOnPlate, variable i_blnDownholderDestinationPositionIsOnPlate ) void ;
  function Trp_HSPFromAndToODTCwithiSWAP( device & ML_STAR, sequence & i_seqHSPSourcePosition, sequence & i_seqHSPDestinationPosition, variable i_intTrackToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode ) void ;
  function Trp_HamiltonComfortLid( device & ML_STAR, sequence & i_seqHamiltonComfortLidSourcePosition, sequence & i_seqHamiltonComfortLidDestinationPosition, variable i_blnParkTransportToolAfterMove, variable i_blnDestinationPositionReachableWithCOREGripper ) void ;
  function Trp_MIDI( device & ML_STAR, sequence & i_seqMIDISourcePosition, sequence & i_seqMIDIDestinationPosition, variable i_intTrackToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode, variable i_intGripModeISWAP ) void ;
  private function Trp_TipsWithMPH( device & ML_STAR, sequence & i_seqTipPickUpPosition, sequence & i_seqTipEjectPosition, variable i_blnCountTipsAtTipPickUpPosition ) void ;
  private function _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport( variable i_strStepReturnValueAspiration, variable i_strStepReturnValueDispense ) void ;
  private function _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReportMPH( variable i_strStepReturnValueAspiration, variable i_strStepReturnValueDispense, sequence i_seqAspiration, sequence i_seqDispense, variable i_blnAnalyseAspirationSetpReturnOnly ) void ;
  private function _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport( variable i_strStepReturnValueLoadingStep ) void ;
  private function _DATA_AnalyzeStepReturnValueOfTransportStepAndWriteToNGSStarReport( variable i_strStepReturnValueGetPlate, variable i_strStepReturnValuePlacePlate, variable i_intTransportTool, variable i_strReadCurrentBarcode ) void ;
  private function _DATA_CalculateAndDefineBatchProcessCleanUp( variable i_intNumberOfColumnsWithinOneBatch, variable i_blnActivateBatchProcessForScaleUp, sequence & i_seqMagneticStandPosition, sequence & o_arrSeqMagneticStandPositionBatchwiseSorted[], variable & o_intNumberOfCalculatedBatchesToBeProcessed ) void ;
  private function _DATA_CheckSequenceParameter( sequence & io_seqAspirationPosition, sequence & io_seqDispensePosition ) void ;
  private function _DATA_GetLabwareIDAndSequenceNamesFromDeck( device & io_instrument, variable & o_arrayLabwareNames[], variable & o_arraySeqNames[] ) void ;
  private function _DATA_GetTipTypeAndDispenseModeOfLiquidClass( variable i_strLiquidClassName, variable & o_intTiptype, variable & o_intDispenseMode ) void ;
  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void ;
  private function _DATA_InterpreteLabwareID( variable i_strLabwareIDToBeAnalysed, variable & o_strTypeOfLabware ) void ;
  private function _DATA_MPH_ProvideSequence96Plate( sequence i_seqSequenceAspiration, sequence i_seqSequenceDispense, sequence & o_seqSequenceTempAspiration, sequence & o_seqSequenceTempDispense ) void ;
  private function _DATA_PlausibilityCheckVolume( variable & io_fltVolumeToBeChecked, variable i_intTipTypeToBeChecked ) void ;
  private function _DATA_ScheduleConsumables( variable i_strPlateType, variable i_strLabwareIDOfSourcePosition ) void ;
  private function _DATA_ScheduleTips( sequence i_seqControllingPipettingSequence, variable i_blnTipExchangeDuringTransfer, variable i_intCurrentTipType, variable i_blnMPHused ) void ;
  private function _DATA_SendEmail_HandleReturnValue( variable i_intErrorCode ) void ;
  private function _DATA_TipAndTimeConsumption( variable i_blnShowDialog ) void ;
  function _DATA_TranslateAutoLoadErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedAutoLoadInformaton ) void ;
  function _DATA_TranslateChannelErrorCodes( variable i_intChannelPerformedTransportOrPipetteStep, variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedPipettingInformaton ) void ;
  function _DATA_TranslateMultiProbeHead96ErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedPipettingInformaton ) void ;
  function _DATA_TranslateiSWAPErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedTransportInformaton ) void ;
  function _EjectTips( device & ML_STAR, sequence i_seqTipEject ) void ;
  private function _HHS_HandleReturnValue( variable i_intErrorCode ) void ;
  private function _HHS_Shake( variable i_intHHS, variable i_intSpeed, variable i_intShakingDuration ) void ;
  private function _PIP_MultidispenseFromTroughToPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles ) void ;
  private function _Process_CleanUp_origFX2_3( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, sequence & i_seqPositionHHS, sequence & i_seqAspirationPositionEthanol, sequence & i_seqMagneticStandPosition, sequence & i_seqLiquidWaste, sequence & i_seqAspirationPositionResuspensionBuffer, variable i_fltVolumeEthanol, variable i_fltVolumeBeads, variable i_fltVolumeResuspensionBuffer, variable i_fltVolumeSupernatantToWaste, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMixing, variable i_strLiquidClassEthanol, variable i_strLiquidClassResuspensionBuffer, variable i_strLiquidClassSupernatantToWaste, variable i_strLiquidClassEthanolToWaste, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerDurationResuspendCleanedLibrary, variable i_intNumberOfColumnsWithinOneBatch, variable i_intShakerDevice, variable i_blnActivateBatchProcessForScaleUp, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver ) void ;
  private function _Process_SizeSelection_origFX2_3( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, sequence & i_seqLiquidWaste, sequence & i_seqPositionHHS, sequence & i_seqTransferPositionNewMidiPlate, sequence & i_seqAspirationPositionEthanol, sequence & i_seqAspirationPositionResuspensionBuffer, sequence & i_seqMagneticStandPosition, sequence & i_trpPositionMIDIWaste, variable i_strLiquidClassResuspensionBuffer, variable i_strLiquidClassEthanol, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMixing, variable i_fltVolumeTransferSupernatantDuringSizeSelection, variable i_fltVolumeEthanol, variable i_fltVolumeBeadsFirstSeparation, variable i_fltVolumeBeadsSecondSeparation, variable i_fltVolumeResuspensionBuffer, variable i_intShakerDevice, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationResuspendCleanedLibrary, variable i_blnActivateBatchProcessForScaleUp, variable i_intNumberOfColumnsWithinOneBatch, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver ) void ;
  private function _Trp_HSPwithCOREGripper( device & ML_STAR, sequence & i_seqHSPStartingPosition, sequence & i_seqHSPDestinationPosition, variable i_intTrackNumberToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode, variable & o_strStepReturnValueCOREGetPlate, variable & o_strStepReturnValueCOREPlacePlate ) void ;
  private function _Trp_MIDIwithCOREGripper( device & ML_STAR, sequence & i_seqMIDIStartingPosition, sequence & i_seqMIDIDestinationPosition, variable i_intTrackNumberToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode, variable & o_strStepReturnValueCOREGetPlate, variable & o_strStepReturnValueCOREPlacePlate ) void ;
  private function _Version(  ) void ;
  function _InitLibrary() {
    LABWARE_PROPERTIES::_InitLibrary();
    ALIQUOT_FOR_EASYSTEPS_V2::_InitLibrary();
    STAR_MPH96_TOOLS::_InitLibrary();
    STAR_CHANNEL_TOOLS::_InitLibrary();
    STAR_TIP_TOOLS::_InitLibrary();
    ARRAYTOOLS::_InitLibrary();
    CREATE_CHANNEL_PATTERN::_InitLibrary();
  }
  function _ExitLibrary() {
    LABWARE_PROPERTIES::_ExitLibrary();
    ALIQUOT_FOR_EASYSTEPS_V2::_ExitLibrary();
    STAR_MPH96_TOOLS::_ExitLibrary();
    STAR_CHANNEL_TOOLS::_ExitLibrary();
    STAR_TIP_TOOLS::_ExitLibrary();
    ARRAYTOOLS::_ExitLibrary();
    CREATE_CHANNEL_PATTERN::_ExitLibrary();
  }

  private function _DATA_InterpreteLabwareID( variable i_strLabwareIDToBeAnalysed, variable & o_strTypeOfLabware ) void {
    private variable l_intLabwareTypeIsAHSPlate;
    private variable l_intLabwareTypeIsAMIDIPlate;
    private variable l_intLabwareTypeIsATrough;
    o_strTypeOfLabware = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>> Submethod: _DATA_InterpreteLabwareID <<<<<<<<<<"));
    l_intLabwareTypeIsAHSPlate = StrFind(i_strLabwareIDToBeAnalysed, Translate("HSP"));
    l_intLabwareTypeIsAMIDIPlate = StrFind(i_strLabwareIDToBeAnalysed, Translate("MIDI"));
    l_intLabwareTypeIsATrough = StrFind(i_strLabwareIDToBeAnalysed, Translate("RGT"));
    if (l_intLabwareTypeIsATrough >= 0)
    {
      o_strTypeOfLabware = Translate("trough");
    }
    else
    {
      if (l_intLabwareTypeIsAHSPlate >= 0)
      {
        o_strTypeOfLabware = Translate("plate");
      }
      else
      {
        if (l_intLabwareTypeIsAMIDIPlate >= 0)
        {
          o_strTypeOfLabware = Translate("plate");
        }
        else
        {
          o_strTypeOfLabware = Translate("tube");
        }
      }
    }
    Trace ("Labware ID to be analyzed :  ", i_strLabwareIDToBeAnalysed, " , Labware type used = ", o_strTypeOfLabware);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: _DATA_InterpreteLabwareID <<<<<<<<<<\n"));
  }

  function PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer ) void {
    private variable l_fltVolumeDelta;
    private variable l_fltVolumeAsp1;
    private variable l_flt_VolumeAsp2;
    private variable l_intCurrentDispenseMode;
    private variable l_intCurrentTipType;
    private variable l_intReturnFindString;
    private variable l_intMainLoopTransferLiquids;
    private variable l_strCurrentDispenseMode;
    private variable l_strStepReturnValueAspiration;
    private variable l_strStepReturnValueDispense;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strVolume;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste <<<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strVolume = StrFStr(i_fltVolume);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Remove supernatant"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      _DATA_PlausibilityCheckVolume(i_fltVolume, l_intCurrentTipType);
      l_fltVolumeDelta = 300 - i_fltVolume;
      if (l_intReturnFindString >= 0)
      {
        if (l_fltVolumeDelta < 20)
        {
          l_fltVolumeAsp1 = 250;
          l_flt_VolumeAsp2 = 50;
        }
        else
        {
          l_fltVolumeAsp1 = i_fltVolume - 50;
          l_flt_VolumeAsp2 = 50;
        }
      }
      else
      {
      }
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        _DATA_ScheduleTips(i_seqDispensePosition, ASWGLOBAL::BOOL::TRUE, l_intCurrentTipType, ASWGLOBAL::BOOL::FALSE);
        if (l_intCurrentTipType == 1)
        {
          HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
          {
            l_intMainLoopTransferLiquids = 0;
            while (
               (i_seqAspirationPosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, i_seqDispensePosition, 1, t_seqTips300, 1);
              l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
              MECC::TraceComment(Translate(">>>>>>>>>>>>>>>> consecutive aspiration step to remove residual EtOH"));
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
              _EjectTips(ML_STAR, ML_STAR.Waste08);
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqAspirationPosition.GetCurrentPosition() > 0 && i_seqAspirationPosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            t_seqTips300.SetMax(t_seqTips300.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
          HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
        }
        else
        {
          MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
          VectorCustomDialogs::Initialize();
          VectorCustomDialogs::ErrorDialog(Translate("Error indication - unsupported tiptye"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Unsupported tiptype detected."), Translate(""));
          abort;
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        VectorCustomDialogs::ErrorDialog(Translate("Error Indication - Unsupported Dispense Mode"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Unsupported dispense mode detected."), Translate(""));
        abort;
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, i_seqAspirationPosition);
      {
        variable _FilterIdsArray_1[];
        variable _ColumnIdsArray_1[];
        variable _ColumnNamesArray_1[];
        variable _ExperimentsArray_1[];
        _FilterIdsArray_1.SetSize(0);
        _ColumnNamesArray_1.SetSize(14);
        _ColumnIdsArray_1.SetSize(14);
        _ColumnNamesArray_1.SetAt(0, "RecordId");
        _ColumnIdsArray_1.SetAt(0, 0);
        _ColumnNamesArray_1.SetAt(1, "TRackBC");
        _ColumnIdsArray_1.SetAt(1, 1);
        _ColumnNamesArray_1.SetAt(2, "TLabwareId");
        _ColumnIdsArray_1.SetAt(2, 2);
        _ColumnNamesArray_1.SetAt(3, "TPositionId");
        _ColumnIdsArray_1.SetAt(3, 3);
        _ColumnNamesArray_1.SetAt(4, "TPositionBC");
        _ColumnIdsArray_1.SetAt(4, 4);
        _ColumnNamesArray_1.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_1.SetAt(5, 5);
        _ColumnNamesArray_1.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_1.SetAt(6, 6);
        _ColumnNamesArray_1.SetAt(7, "TVolume");
        _ColumnIdsArray_1.SetAt(7, 7);
        _ColumnNamesArray_1.SetAt(8, "SRackBC");
        _ColumnIdsArray_1.SetAt(8, 8);
        _ColumnNamesArray_1.SetAt(9, "SLabwareId");
        _ColumnIdsArray_1.SetAt(9, 9);
        _ColumnNamesArray_1.SetAt(10, "SPositionId");
        _ColumnIdsArray_1.SetAt(10, 10);
        _ColumnNamesArray_1.SetAt(11, "SPositionBC");
        _ColumnIdsArray_1.SetAt(11, 11);
        _ColumnNamesArray_1.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_1.SetAt(12, 12);
        _ColumnNamesArray_1.SetAt(13, "UserName");
        _ColumnIdsArray_1.SetAt(13, 13);
        _ExperimentsArray_1.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqDispensePosition, 3, _FilterIdsArray_1, 0, _ColumnIdsArray_1, _ColumnNamesArray_1, _ExperimentsArray_1, "SupernatantToWaste_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function Trp_MIDI( device & ML_STAR, sequence & i_seqMIDISourcePosition, sequence & i_seqMIDIDestinationPosition, variable i_intTrackToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode, variable i_intGripModeISWAP ) void {
    private variable l_strCurrentBarcodeRead;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strTransportTool;
    private variable l_strStepReturnValueCOREGetPlate;
    private variable l_strStepReturnValueCOREPlacePlate;
    private variable l_intGripMode;
    private variable l_intInverseGripValue;
    private variable l_intGripOpeningBeforeAccess;
    private variable l_intGripWidth;
    o_strReadCurrentBarcode = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Trp_MIDI <<<<<<<<<<"));
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqMIDISourcePosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqMIDIDestinationPosition);
    _DATA_ScheduleConsumables(Translate("MIDI"), l_strLabwareIDOfSourceSequence);
    if (t_intTransportTool == 1)
    {
      l_strTransportTool = Translate("iSWAP");
    }
    else
    {
      if (t_intTransportTool == 2)
      {
        l_strTransportTool = Translate("CORE gripper");
      }
      else
      {
        l_strTransportTool = Translate("undefined tool - check definition");
      }
    }
    if(0){
      l_strInformationToBeUpdated = StrConcat8(Translate("Transport MIDI"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Tool used : "), l_strTransportTool, Translate("."));
      l_strInformationToBeUpdated = Translate("");
      DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    }
    if (t_intTransportTool == 1)
    {
      if (i_intGripModeISWAP == 1)
      {
        MECC::TraceComment(Translate("Grip the plate from large site (front from USER voint of view) activated"));
        l_intGripMode = 1;
        l_intGripWidth = 1245;
        l_intGripOpeningBeforeAccess = 130;
        l_intInverseGripValue = 0;
      }
      if (i_intGripModeISWAP == 2)
      {
        MECC::TraceComment(Translate("Grip the plate from small site (right from USER voint of view)  activated"));
        l_intGripMode = 0;
        l_intGripWidth = 80;
        l_intGripOpeningBeforeAccess = 87;
        l_intInverseGripValue = 0;
      }
      if (i_intGripModeISWAP == 3)
      {
        MECC::TraceComment(Translate("Grip the plate from large site (back from USER voint of view) activated"));
        l_intGripMode = 1;
        l_intGripWidth = 1245;
        l_intGripOpeningBeforeAccess = 130;
        l_intInverseGripValue = 1;
      }
      if (i_intGripModeISWAP == 4)
      {
        MECC::TraceComment(Translate("Grip the plate from small site (left from USER voint of view)  activated"));
        l_intGripMode = 0;
        l_intGripWidth = 80;
        l_intGripOpeningBeforeAccess = 87;
        l_intInverseGripValue = 1;
      }
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        	l_strStepReturnValueCOREGetPlate = arrRetValues[2];
      }
      if (i_intTrackToReadBarcode > 0)
      {
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._3ADE1686_D394_4a08_918C_20E3EDA3CC69("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"); // ReadPlateBarcode
          	l_strCurrentBarcodeRead = arrRetValues[3];
        }
        Trace ("Current barcode read by autoload = ", l_strCurrentBarcodeRead);
        o_strReadCurrentBarcode = l_strCurrentBarcodeRead;
      }
      else
      {
        o_strReadCurrentBarcode = Translate("No barcode reading activated");
      }
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
        	l_strStepReturnValueCOREPlacePlate = arrRetValues[2];
      }
      if (i_blnParkTransportToolAfterMove == 1)
      {
        ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
    }
    if (t_intTransportTool == 2)
    {
      _Trp_MIDIwithCOREGripper(ML_STAR, i_seqMIDISourcePosition, i_seqMIDIDestinationPosition, i_intTrackToReadBarcode, i_blnParkTransportToolAfterMove, o_strReadCurrentBarcode, l_strStepReturnValueCOREGetPlate, l_strStepReturnValueCOREPlacePlate);
    }
    if(0){
      DATA_UpdateInformationIntoReportFile(o_strReadCurrentBarcode, ASWGLOBAL::BOOL::TRUE);
    }
    _DATA_AnalyzeStepReturnValueOfTransportStepAndWriteToNGSStarReport(l_strStepReturnValueCOREGetPlate, l_strStepReturnValueCOREPlacePlate, t_intTransportTool, o_strReadCurrentBarcode);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Trp_MIDI <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function Trp_HSP( device & ML_STAR, sequence & i_seqHSPStartingPosition, sequence & i_seqHSP_Destination, variable i_intTrackNumberToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode, variable i_intGripModeISWAP ) void {
    private variable l_strCurrentBarcodeRead;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strTransportTool;
    private variable l_strStepReturnValueCOREGetPlate;
    private variable l_strStepReturnValueCOREPlacePlate;
    private variable l_intGripMode;
    private variable l_intGripOpeningBeforeAccess;
    private variable l_intGripWidth;
    private variable l_intInverseGripValue;
    o_strReadCurrentBarcode = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Trp_HSP <<<<<<<<<"));
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqHSPStartingPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqHSP_Destination);
    _DATA_ScheduleConsumables(Translate("HSP"), l_strLabwareIDOfSourceSequence);
    if (t_intTransportTool == 1)
    {
      l_strTransportTool = Translate("iSWAP");
    }
    else
    {
      if (t_intTransportTool == 2)
      {
        l_strTransportTool = Translate("CORE gripper");
      }
      else
      {
        l_strTransportTool = Translate("undefined tool - check definition");
      }
    }
    if(0){
      l_strInformationToBeUpdated = StrConcat8(Translate("Transport HSP"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Tool used : "), l_strTransportTool, Translate("."));
      l_strInformationToBeUpdated = Translate("");
      DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    }
    if (t_intTransportTool == 1)
    {
      if (i_intGripModeISWAP == 1)
      {
        MECC::TraceComment(Translate("Grip the plate from large site (front from USER voint of view) activated"));
        l_intGripMode = 1;
        l_intGripWidth = 1245;
        l_intGripOpeningBeforeAccess = 130;
        l_intInverseGripValue = 0;
      }
      if (i_intGripModeISWAP == 2)
      {
        MECC::TraceComment(Translate("Grip the plate from small site (right from USER voint of view)  activated"));
        l_intGripMode = 0;
        l_intGripWidth = 80;
        l_intGripOpeningBeforeAccess = 87;
        l_intInverseGripValue = 0;
      }
      if (i_intGripModeISWAP == 3)
      {
        MECC::TraceComment(Translate("Grip the plate from large site (back from USER voint of view) activated"));
        l_intGripMode = 1;
        l_intGripWidth = 1245;
        l_intGripOpeningBeforeAccess = 130;
        l_intInverseGripValue = 1;
      }
      if (i_intGripModeISWAP == 4)
      {
        MECC::TraceComment(Translate("Grip the plate from small site (left from USER voint of view)  activated"));
        l_intGripMode = 0;
        l_intGripWidth = 80;
        l_intGripOpeningBeforeAccess = 87;
        l_intInverseGripValue = 1;
      }
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        	l_strStepReturnValueCOREGetPlate = arrRetValues[2];
      }
      if (i_intTrackNumberToReadBarcode > 0)
      {
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._3ADE1686_D394_4a08_918C_20E3EDA3CC69("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"); // ReadPlateBarcode
          	l_strCurrentBarcodeRead = arrRetValues[3];
        }
        Trace ("Current barcode read by autoload = ", l_strCurrentBarcodeRead);
        o_strReadCurrentBarcode = l_strCurrentBarcodeRead;
      }
      else
      {
        o_strReadCurrentBarcode = Translate("No barcode reading activated");
      }
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
        	l_strStepReturnValueCOREPlacePlate = arrRetValues[2];
      }
      if (i_blnParkTransportToolAfterMove == 1)
      {
        ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
    }
    if (t_intTransportTool == 2)
    {
      _Trp_HSPwithCOREGripper(ML_STAR, i_seqHSPStartingPosition, i_seqHSP_Destination, i_intTrackNumberToReadBarcode, i_blnParkTransportToolAfterMove, o_strReadCurrentBarcode, l_strStepReturnValueCOREGetPlate, l_strStepReturnValueCOREPlacePlate);
    }
    if(0){
      DATA_UpdateInformationIntoReportFile(o_strReadCurrentBarcode, ASWGLOBAL::BOOL::TRUE);
    }
    _DATA_AnalyzeStepReturnValueOfTransportStepAndWriteToNGSStarReport(l_strStepReturnValueCOREGetPlate, l_strStepReturnValueCOREPlacePlate, t_intTransportTool, o_strReadCurrentBarcode);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Trp_HSP <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _Trp_MIDIwithCOREGripper( device & ML_STAR, sequence & i_seqMIDIStartingPosition, sequence & i_seqMIDIDestinationPosition, variable i_intTrackNumberToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode, variable & o_strStepReturnValueCOREGetPlate, variable & o_strStepReturnValueCOREPlacePlate ) void {
    private variable l_blnPlateCheck;
    private variable l_intGripHeight;
    private variable l_intGripperWidth;
    private variable l_intGripperOpeningWidthBeforeAccess;
    private variable l_intPressOnDistance;
    private variable l_strSourceLabwareID;
    private variable l_strReturnValueFoundSubString;
    private variable l_strReturnValueDestinationLabwareID;
    private variable l_strCurrentBarcodeRead;
    private variable l_strStepReturnValueCOREGetPlate;
    private variable l_strStepReturnValueCOREPlacePlate;
    o_strReadCurrentBarcode = 0;
    o_strStepReturnValueCOREGetPlate = 0;
    o_strStepReturnValueCOREPlacePlate = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>> Submethod:  Move_MIDI_wCOREgrippers <<<<<<<<<<"));
    MECC::TraceComment(Translate("Using CORE grippers for MIDI movements"));
    l_intGripperWidth = 79;
    l_intGripperOpeningWidthBeforeAccess = 87;
    l_strReturnValueDestinationLabwareID = SeqGetLabwareId(i_seqMIDIDestinationPosition);
    l_strSourceLabwareID = SeqGetLabwareId(i_seqMIDIStartingPosition);
    l_strReturnValueFoundSubString = StrFind(l_strSourceLabwareID, Translate("MIDI"));
    if (l_strReturnValueFoundSubString < 0)
    {
      l_intGripHeight = 15;
    }
    else
    {
      l_intGripHeight = 8;
    }
    if (l_strReturnValueDestinationLabwareID == "MIDI_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMIDIStartingPosition, -20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMIDIDestinationPosition, -60, 0, 8);
    }
    if (l_strReturnValueDestinationLabwareID == "MIDI_Waste_CORE")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMIDIStartingPosition, -20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMIDIDestinationPosition, -60, 0, 8);
    }
    if (i_intTrackNumberToReadBarcode > 0)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        	l_strStepReturnValueCOREGetPlate = arrRetValues[2];
      }
      i_intTrackNumberToReadBarcode = 5;
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._E59329BC_113D_451D_9468_F2327ECEE33E("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"); // ZSwapReadBarcode
        	l_strCurrentBarcodeRead = arrRetValues[3];
      }
      o_strReadCurrentBarcode = l_strCurrentBarcodeRead;
      Trace ("Current barcode read by autoload = ", l_strCurrentBarcodeRead);
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        	l_strStepReturnValueCOREGetPlate = arrRetValues[2];
      }
      o_strReadCurrentBarcode = Translate("No barcode reading activated");
    }
    o_strStepReturnValueCOREGetPlate = l_strStepReturnValueCOREGetPlate;
    l_blnPlateCheck = 1;
    l_intPressOnDistance = 0.3;
    if (l_strReturnValueDestinationLabwareID == "HHS4_MIDI")
    {
      l_blnPlateCheck = 0;
      l_intPressOnDistance = 0;
    }
    if (l_strReturnValueDestinationLabwareID == "HHS5_MIDI")
    {
      l_blnPlateCheck = 0;
      l_intPressOnDistance = 0;
    }
    if (l_strReturnValueDestinationLabwareID == "MIDI_Waste")
    {
      l_blnPlateCheck = 0;
    }
    if (l_strReturnValueDestinationLabwareID == "MIDI_Waste_CORE")
    {
      l_blnPlateCheck = 0;
    }
    if (i_blnParkTransportToolAfterMove == 1)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        	l_strStepReturnValueCOREPlacePlate = arrRetValues[2];
      }
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        	l_strStepReturnValueCOREPlacePlate = arrRetValues[2];
      }
    }
    o_strStepReturnValueCOREPlacePlate = l_strStepReturnValueCOREPlacePlate;
    if (l_strReturnValueDestinationLabwareID == "MIDI_Waste_CORE")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMIDIStartingPosition, 20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMIDIDestinationPosition, 60, 0, -8);
    }
    if (l_strReturnValueDestinationLabwareID == "MIDI_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMIDIStartingPosition, 20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMIDIDestinationPosition, 60, 0, -8);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Move_MIDI_wCOREgrippers <<<<<<<<<<\n"));
  }

  private function _Trp_HSPwithCOREGripper( device & ML_STAR, sequence & i_seqHSPStartingPosition, sequence & i_seqHSPDestinationPosition, variable i_intTrackNumberToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode, variable & o_strStepReturnValueCOREGetPlate, variable & o_strStepReturnValueCOREPlacePlate ) void {
    private variable l_blnPlateCheck;
    private variable l_strReturnValueDestinationLabwareID;
    private variable l_strCurrentBarcodeRead;
    private variable l_strStepReturnValueCOREGetPlate;
    private variable l_strStepReturnValueCOREPlacePlate;
    private variable l_fltDistanceinMMPressPlateDuringPlacePlateCommand;
    o_strReadCurrentBarcode = 0;
    o_strStepReturnValueCOREGetPlate = 0;
    o_strStepReturnValueCOREPlacePlate = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>> Submethod: _Trp_HSPwithCOREGripper <<<<<<<<<"));
    MECC::TraceComment(Translate("Using CORE grippers for HSP movements"));
    l_strReturnValueDestinationLabwareID = SeqGetLabwareId(i_seqHSPDestinationPosition);
    if (l_strReturnValueDestinationLabwareID == "HSP_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPStartingPosition, -20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPDestinationPosition, -60, 0, 0);
    }
    if (l_strReturnValueDestinationLabwareID == "HSP_Waste_CORE")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPStartingPosition, -20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPDestinationPosition, -60, 0, 0);
    }
    if (l_strReturnValueDestinationLabwareID == "HSP_DFP_OnStacker")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPStartingPosition, -35, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPDestinationPosition, -35, 0, 0);
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      	l_strStepReturnValueCOREGetPlate = arrRetValues[2];
    }
    o_strStepReturnValueCOREGetPlate = l_strStepReturnValueCOREGetPlate;
    if (i_intTrackNumberToReadBarcode > 0)
    {
      i_intTrackNumberToReadBarcode = 5;
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._E59329BC_113D_451D_9468_F2327ECEE33E("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"); // ZSwapReadBarcode
        	l_strCurrentBarcodeRead = arrRetValues[3];
      }
      o_strReadCurrentBarcode = l_strCurrentBarcodeRead;
      Trace ("Current barcode read by autoload = ", l_strCurrentBarcodeRead);
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      o_strReadCurrentBarcode = Translate("No barcode reading activated");
    }
    l_fltDistanceinMMPressPlateDuringPlacePlateCommand = 0.3;
    l_blnPlateCheck = 0;
    if (l_strReturnValueDestinationLabwareID == "HSP_CPAC")
    {
      l_blnPlateCheck = 1;
    }
    if (i_blnParkTransportToolAfterMove == 1)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        	l_strStepReturnValueCOREPlacePlate = arrRetValues[2];
      }
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        	l_strStepReturnValueCOREPlacePlate = arrRetValues[2];
      }
    }
    o_strStepReturnValueCOREPlacePlate = l_strStepReturnValueCOREPlacePlate;
    if (l_strReturnValueDestinationLabwareID == "HSP_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPStartingPosition, 20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPDestinationPosition, 60, 0, 0);
    }
    if (l_strReturnValueDestinationLabwareID == "HSP_Waste_CORE")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPStartingPosition, 20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPDestinationPosition, 60, 0, 0);
    }
    if (l_strReturnValueDestinationLabwareID == "HSP_DFP_OnStacker")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPStartingPosition, 35, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqHSPDestinationPosition, 35, 0, 0);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  _Trp_HSPwithCOREGripper <<<<<<<<<<\n"));
  }

  function Trp_HSPFromAndToODTCwithiSWAP( device & ML_STAR, sequence & i_seqHSPSourcePosition, sequence & i_seqHSPDestinationPosition, variable i_intTrackToReadBarcode, variable i_blnParkTransportToolAfterMove, variable & o_strReadCurrentBarcode ) void {
    private variable l_strCurrentBarcodeRead;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strStepReturnValueCOREGetPlate;
    private variable l_strStepReturnValueCOREPlacePlate;
    o_strReadCurrentBarcode = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: Trp_HSPFromAndToODTCwithiSWAP <<<<<<<<<"));
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqHSPSourcePosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqHSPDestinationPosition);
    if(0){
      l_strInformationToBeUpdated = StrConcat8(Translate("Transport plate using iSWAP"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Tool used : "), Translate("iSWAP"), Translate("."));
      l_strInformationToBeUpdated = Translate("");
      DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    }
    if (t_blnClinicalNGSStarlet == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("Clinical NGSSTARLET has the A1 pos on HSP_ODTC bottom right as the pipetting position is not reachable\n with the iswap from the right site due to Tube adapter or reagent troughs... invert gripping mode is needed.\nthis forces to handle 2 cases : \n\n1) trp from pip position to odtc (invert on)\n2) trp from odtc to pip position (invert off)"));
      if (l_strLabwareIDOfSourceSequence == "HSP_ODTC")
      {
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
          	l_strStepReturnValueCOREGetPlate = arrRetValues[2];
        }
      }
      else
      {
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
          	l_strStepReturnValueCOREGetPlate = arrRetValues[2];
        }
      }
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        	l_strStepReturnValueCOREGetPlate = arrRetValues[2];
      }
    }
    if (i_intTrackToReadBarcode > 0)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._3ADE1686_D394_4a08_918C_20E3EDA3CC69("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"); // ReadPlateBarcode
        	l_strCurrentBarcodeRead = arrRetValues[3];
      }
      o_strReadCurrentBarcode = l_strCurrentBarcodeRead;
      Trace ("Current barcode read by autoload = ", l_strCurrentBarcodeRead);
    }
    else
    {
      o_strReadCurrentBarcode = Translate("No barcode reading activated");
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
      	l_strStepReturnValueCOREPlacePlate = arrRetValues[2];
    }
    if (i_blnParkTransportToolAfterMove == 1)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
    else
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    _DATA_AnalyzeStepReturnValueOfTransportStepAndWriteToNGSStarReport(l_strStepReturnValueCOREGetPlate, l_strStepReturnValueCOREPlacePlate, 1, o_strReadCurrentBarcode);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: Trp_HSPFromAndToODTCwithiSWAP <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _DATA_GetTipTypeAndDispenseModeOfLiquidClass( variable i_strLiquidClassName, variable & o_intTiptype, variable & o_intDispenseMode ) void {
    o_intTiptype = 0;
    o_intDispenseMode = 0;
    MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(i_strLiquidClassName);
    o_intTiptype = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
    o_intDispenseMode = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::DispenseMode);
    Trace ("Liquid class name :  ", i_strLiquidClassName, ", Tiptype = ", o_intTiptype, ", DispenseMode = ", o_intDispenseMode);
  }

  private function Abstract(  ) void {
    MECC::TraceComment(Translate("*********************************************************************\nSubmethod Library:  NGSStarProccesses\nWritten By:  Stephan Grosch, Hamilton Bonaduz AG, Switzerland \nCo-writer:  Enrique Bayo Iglesias, Brannon Orr and William Hutchens\nDate:  Februrary 28, 2020 \nVersion:  2.5.12\n\nRevision history: more informaiton at smt _Version\n\n*********************************************************************"));
  }

  private function _Version(  ) void {
  }

  private function _DATA_PlausibilityCheckVolume( variable & io_fltVolumeToBeChecked, variable i_intTipTypeToBeChecked ) void {
    private variable l_fltVolumeMinimum;
    private variable l_fltVolumeMaximum;
    private variable l_retValueDialog;
    private variable l_strTipType;
    private variable l_strVolume;
    private variable l_strTopText;
    private variable l_strVolumeMinimum;
    private variable l_strVolumeMaximum;
    private variable l_strCheckVolumeMessage;
    private variable l_arrPlausibilityCheckMessage[];
    MECC::TraceComment(Translate("\n>>>>>>>>>> Submethod:  _DATA_PlausibilityCheckVolume<<<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    Trace ("Volume to be checked vs tiptype:  ", io_fltVolumeToBeChecked, " - current tiptype : ", i_intTipTypeToBeChecked);
    if (i_intTipTypeToBeChecked == 1)
    {
      l_fltVolumeMaximum = 300;
      l_fltVolumeMinimum = 10;
      l_strTipType = Translate("Standard Volume Filter Tip - SVFT - 300ul");
    }
    if (i_intTipTypeToBeChecked == 5)
    {
      l_fltVolumeMaximum = 1000;
      l_fltVolumeMinimum = 15;
      l_strTipType = Translate("High Volume Filter Tip - HVFT - 1000ul");
    }
    if (i_intTipTypeToBeChecked == 23)
    {
      l_fltVolumeMaximum = 50;
      l_fltVolumeMinimum = 1;
      l_strTipType = Translate("Low Volume Filter Tip - LVFT - 50ul");
    }
    if (io_fltVolumeToBeChecked <= l_fltVolumeMaximum)
    {
      if (io_fltVolumeToBeChecked < l_fltVolumeMinimum)
      {
        Trace ("Volume check failed.");
        l_strCheckVolumeMessage = Translate("Volume check failed. Press OK to proceed with the run. Press CANCEL to Abort the run.");
        l_strTopText = Translate("Plausibility check : Check volume - undershoot minimum  volume of the tiptype");
        l_strVolume = StrConcat2(Translate("Volume [µl] : "), io_fltVolumeToBeChecked);
        l_strTipType = StrConcat2(Translate("Current tip type : "), l_strTipType);
        l_strVolumeMinimum = StrConcat2(Translate("Defined minimum volume [µl] : "), l_fltVolumeMinimum);
        l_arrPlausibilityCheckMessage.SetSize(0);
        l_arrPlausibilityCheckMessage.AddAsLast(l_strVolume);
        l_arrPlausibilityCheckMessage.AddAsLast(l_strTipType);
        l_arrPlausibilityCheckMessage.AddAsLast(l_strVolumeMinimum);
        l_arrPlausibilityCheckMessage.AddAsLast(l_strCheckVolumeMessage);
        l_retValueDialog = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, l_strTopText, l_strCheckVolumeMessage, l_arrPlausibilityCheckMessage);
        if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          _DATA_IntegratedAbortHandler(Translate("NGSStarProcesses.smt "), Translate("_DATA_PlausibilityCheckVolume. This smt checks wether a given transfer volume is within the pipetting range of a special tiptype or not."));
        }
        else
        {
          Trace ("Volume check failed - user decided to use a volume that is less then the recommended minimum for the tiptype used.");
        }
      }
      else
      {
        Trace ("Volume check passed.");
      }
    }
    else
    {
      Trace ("Volume check failed.");
      l_strCheckVolumeMessage = Translate("Volume check failed. Press OK to proceed with the run using max. allowed volume for this tip type. Press CANCEL to Abort the run.");
      l_strTopText = Translate("Plausibility check : Check volume - overshoot maximum  volume of the tiptype");
      l_strVolume = StrConcat2(Translate("Volume [µl] : "), io_fltVolumeToBeChecked);
      l_strTipType = StrConcat2(Translate("Current tip type : "), l_strTipType);
      l_strVolumeMaximum = StrConcat2(Translate("Defined maximum volume [µl] : "), l_fltVolumeMaximum);
      l_arrPlausibilityCheckMessage.SetSize(0);
      l_arrPlausibilityCheckMessage.AddAsLast(l_strVolume);
      l_arrPlausibilityCheckMessage.AddAsLast(l_strTipType);
      l_arrPlausibilityCheckMessage.AddAsLast(l_strVolumeMaximum);
      l_arrPlausibilityCheckMessage.AddAsLast(l_strCheckVolumeMessage);
      l_retValueDialog = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, l_strTopText, l_strCheckVolumeMessage, l_arrPlausibilityCheckMessage);
      if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
      {
        _DATA_IntegratedAbortHandler(Translate("NGSStarProcesses.smt "), Translate("_DATA_PlausibilityCheckVolume. This smt checks wether a given transfer volume is within the pipetting range of a special tiptype or not."));
      }
      else
      {
        io_fltVolumeToBeChecked = l_strVolumeMaximum;
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  _DATA_PlausibilityCheckVolume <<<<<<<<<<\n"));
  }

  function PIP_ReagentsFromTubeOrTroughOrPlateToPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtDispenseOnFixHeight ) void {
    private variable l_blnStringDispenseModeSurfaceEmpty;
    private variable l_intCurrentDispenseMode;
    private variable l_intCurrentTipType;
    private variable l_intNumberOfSamples;
    private variable l_intMainLoopTransferLiquids;
    private variable l_strCurrentDispenseMode;
    private variable l_strLabwareIDAspiration;
    private variable l_strStepReturnValueAspiration;
    private variable l_strStepReturnValueDispense;
    private variable l_strTypeOfLabware;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strInformationToBeUpdated;
    private variable l_strVolume;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    private variable l_blnActivateLiquidFollowing;
    private variable l_intMixCycleDispense;
    private variable l_intMixCycleAspiration;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_ReagentsFromTubeOrTroughOrPlateToPlate <<<<<<<<<<"));
    Trace ("++++++++++++++++++++++i_fltVolume : ", i_fltVolume);
    VectorCustomDialogs::Initialize();
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strVolume = StrFStr(i_fltVolume);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_blnStringDispenseModeSurfaceEmpty = StrFind(i_strLiquidClassNameTransfer, Translate("SurfaceEmpty"));
      _DATA_PlausibilityCheckVolume(i_fltVolume, l_intCurrentTipType);
      l_strLabwareIDAspiration = SeqGetLabwareId(i_seqAspirationPosition);
      _DATA_InterpreteLabwareID(l_strLabwareIDAspiration, l_strTypeOfLabware);
      l_intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        _DATA_ScheduleTips(i_seqDispensePosition, i_blnTipExchangeDuringTransfer, l_intCurrentTipType, ASWGLOBAL::BOOL::FALSE);
        _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
        if (i_fltVolumeMixDispense == 0)
        {
          l_intMixCycleDispense = 0;
        }
        else
        {
          l_intMixCycleDispense = i_intMixCycles;
        }
        if (i_fltVolumeMixAspiration == 0)
        {
          l_intMixCycleAspiration = 0;
        }
        else
        {
          l_intMixCycleAspiration = i_intMixCycles;
        }
        MECC::TraceComment(Translate("********** Now pipetting reagents to destination plate"));
        if (l_intCurrentTipType == 1)
        {
          {
            l_intMainLoopTransferLiquids = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, i_seqDispensePosition, 1, t_seqTips300, 1);
              l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (l_intMainLoopTransferLiquids == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              if (i_fltAspirateHeightFromBottom == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                if (i_fltAspirateHeightFromBottom <= 1.8)
                {
                  l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
                }
                else
                {
                  l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              if (i_fltDispenseHeightFromBottom == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              else
              {
                if(0){
                  if (i_fltDispenseHeightFromBottom <= 3)
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
                  }
                  else
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
                  }
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                _EjectTips(ML_STAR, ML_STAR.Waste08);
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            t_seqTips300.SetMax(t_seqTips300.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (l_intCurrentTipType == 5)
        {
          {
            l_intMainLoopTransferLiquids = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, i_seqDispensePosition, 1, t_seqTips1000, 1);
              l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (l_intMainLoopTransferLiquids == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              if (i_fltAspirateHeightFromBottom == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                if (i_fltAspirateHeightFromBottom <= 1.8)
                {
                  l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
                }
                else
                {
                  l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              if (i_fltDispenseHeightFromBottom == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              else
              {
                if(0){
                  if (i_fltDispenseHeightFromBottom <= 3)
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
                  }
                  else
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
                  }
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                _EjectTips(ML_STAR, ML_STAR.Waste08);
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            t_seqTips1000.SetMax(t_seqTips1000.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (l_intCurrentTipType == 23)
        {
          {
            l_intMainLoopTransferLiquids = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, i_seqDispensePosition, 1, t_seqTips50, 1);
              l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (l_intMainLoopTransferLiquids == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              if (i_fltAspirateHeightFromBottom == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                if (i_fltAspirateHeightFromBottom <= 1.8)
                {
                  l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
                }
                else
                {
                  l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              if (i_fltDispenseHeightFromBottom == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              else
              {
                if(0){
                  if (i_fltDispenseHeightFromBottom <= 3)
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
                  }
                  else
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
                  }
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                _EjectTips(ML_STAR, ML_STAR.Waste08);
              }
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            t_seqTips50.SetMax(t_seqTips50.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
        {
          _EjectTips(ML_STAR, ML_STAR.Waste08);
        }
      }
      if (l_strCurrentDispenseMode == "Part")
      {
        _PIP_MultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPosition, i_seqDispensePosition, i_fltVolume, i_strLiquidClassNameTransfer, i_intMixCycles);
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, i_seqAspirationPosition);
      {
        variable _FilterIdsArray_2[];
        variable _ColumnIdsArray_2[];
        variable _ColumnNamesArray_2[];
        variable _ExperimentsArray_2[];
        _FilterIdsArray_2.SetSize(0);
        _ColumnNamesArray_2.SetSize(14);
        _ColumnIdsArray_2.SetSize(14);
        _ColumnNamesArray_2.SetAt(0, "RecordId");
        _ColumnIdsArray_2.SetAt(0, 0);
        _ColumnNamesArray_2.SetAt(1, "TRackBC");
        _ColumnIdsArray_2.SetAt(1, 1);
        _ColumnNamesArray_2.SetAt(2, "TLabwareId");
        _ColumnIdsArray_2.SetAt(2, 2);
        _ColumnNamesArray_2.SetAt(3, "TPositionId");
        _ColumnIdsArray_2.SetAt(3, 3);
        _ColumnNamesArray_2.SetAt(4, "TPositionBC");
        _ColumnIdsArray_2.SetAt(4, 4);
        _ColumnNamesArray_2.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_2.SetAt(5, 5);
        _ColumnNamesArray_2.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_2.SetAt(6, 6);
        _ColumnNamesArray_2.SetAt(7, "TVolume");
        _ColumnIdsArray_2.SetAt(7, 7);
        _ColumnNamesArray_2.SetAt(8, "SRackBC");
        _ColumnIdsArray_2.SetAt(8, 8);
        _ColumnNamesArray_2.SetAt(9, "SLabwareId");
        _ColumnIdsArray_2.SetAt(9, 9);
        _ColumnNamesArray_2.SetAt(10, "SPositionId");
        _ColumnIdsArray_2.SetAt(10, 10);
        _ColumnNamesArray_2.SetAt(11, "SPositionBC");
        _ColumnIdsArray_2.SetAt(11, 11);
        _ColumnNamesArray_2.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_2.SetAt(12, 12);
        _ColumnNamesArray_2.SetAt(13, "UserName");
        _ColumnIdsArray_2.SetAt(13, 13);
        _ExperimentsArray_2.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqDispensePosition, 3, _FilterIdsArray_2, 0, _ColumnIdsArray_2, _ColumnNamesArray_2, _ExperimentsArray_2, "Reagents_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_ReagentsFromTubeOrTroughOrPlateToPlate<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_IncubationTimer( timer & i_strIncubationTimerName, variable i_intTime, variable i_intTimerMode ) void {
    private variable l_strInformationToBeUpdated;
    private variable l_intTime;
    private variable l_fltElapsedTime;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_IncubationTimer<<<<<<<<<<"));
    l_intTime = MthFloor(i_intTime);
    l_strInformationToBeUpdated = StrConcat8(Translate("Incubation performed "), Translate(""), Translate(". Duration : "), l_intTime, Translate(" seconds"), Translate("."), Translate(""), Translate(""));
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      Trace ("Timer name : ", i_strIncubationTimerName);
      Trace ("Time to be perfomed:  ", i_intTime);
      Trace ("Timer mode (1 = START and WAIT; 2 = START only; 3 = RETRIEVE elapsed time and WAIT): ", i_intTimerMode);
      if (i_intTimerMode == 1)
      {
        if( 0 == i_strIncubationTimerName.SetTimer(i_intTime) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == i_strIncubationTimerName.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
        l_fltElapsedTime = i_strIncubationTimerName.GetElapsedTime();
        Trace("Elapsed time : ",l_fltElapsedTime);
      }
      if (i_intTimerMode == 2)
      {
        if( 0 == i_strIncubationTimerName.SetTimer(i_intTime) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      if (i_intTimerMode == 3)
      {
        if( 0 == i_strIncubationTimerName.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
        l_fltElapsedTime = i_strIncubationTimerName.GetElapsedTime();
        Trace("Elapsed time : ",l_fltElapsedTime);
      }
    }
    else
    {
      Trace ("Simulation Mode - skip timer : ", i_strIncubationTimerName);
      Trace ("Time to be perfomed:  ", i_intTime);
      Trace ("Timer mode (1 = START and WAIT; 2 = START only; 3 = RETRIEVE elapsed time and WAIT): ", i_intTimerMode);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_IncubationTimer<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_CheckPlatesInStacks( device & ML_STAR, sequence & i_seqStack1, sequence & i_seqStack2, sequence & i_seqStack3, sequence & i_seqStack4, variable i_intStack1ExpectedNumberOfPlates, variable i_intStack2ExpectedNumberOfPlates, variable i_intStack3ExpectedNumberOfPlates, variable i_intStack4ExpectedNumberOfPlates, variable & o_intResultCheckOfFalseLoading, variable & o_strMessageResult ) void {
    private variable l_intMaxNumberOfPlatesWithinCurrentStack;
    private variable l_intPlateNumber_TopStack1;
    private variable l_intPlateNumber_TopStack2;
    private variable l_intPlateNumber_TopStack3;
    private variable l_intPlateNumber_TopStack4;
    private variable l_strCurrentLabID;
    private variable l_strPlateNumber_TopStack1;
    private variable l_strPlateNumber_TopStack2;
    private variable l_strPlateNumber_TopStack3;
    private variable l_strPlateNumber_TopStack4;
    private variable l_intCurrentLoopNumberOfPlatesWithinCurrentStack;
    o_intResultCheckOfFalseLoading = 0;
    o_strMessageResult = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Start Submethod : DATA_CheckPlatesInStacks<<<<<<<<<<"));
    o_strMessageResult = Translate("Results of Checking Plates in Stacks:\n");
    o_intResultCheckOfFalseLoading = 0;
    l_strPlateNumber_TopStack1 = Translate("");
    l_strPlateNumber_TopStack2 = Translate("");
    l_strPlateNumber_TopStack3 = Translate("");
    l_strPlateNumber_TopStack4 = Translate("");
    if (i_intStack1ExpectedNumberOfPlates > 0)
    {
      if(0){
        TrcTraceSequence(i_seqStack1);
      }
      if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
      {
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
        l_intPlateNumber_TopStack1 = i_intStack1ExpectedNumberOfPlates;
        l_strPlateNumber_TopStack1 = Translate("1");
      }
      else
      {
        if (t_intTransportTool == 2)
        {
          l_intMaxNumberOfPlatesWithinCurrentStack = SeqGetMax(i_seqStack1);
          {
            for(l_intCurrentLoopNumberOfPlatesWithinCurrentStack = 0; l_intCurrentLoopNumberOfPlatesWithinCurrentStack < l_intMaxNumberOfPlatesWithinCurrentStack;)
            {
              l_intCurrentLoopNumberOfPlatesWithinCurrentStack = l_intCurrentLoopNumberOfPlatesWithinCurrentStack + 1;
              onerror goto errLabel_3 ;
              err.Clear();
              {
                	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
              }
              l_strCurrentLabID = SeqGetLabwareId(i_seqStack1);
              l_strPlateNumber_TopStack1 = StrRight(l_strCurrentLabID, 1);
              l_intPlateNumber_TopStack1 = StrIVal(l_strPlateNumber_TopStack1);
              break;
              errLabel_3 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                SeqIncrement(i_seqStack1, 1);
              }   /* end if from skip handler if no error */
            }
          }
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._8E745E0A_158E_425e_BD3E_2F894E354A40("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"); // GetFirstPlatePosition
            	l_strPlateNumber_TopStack1 = arrRetValues[3];
          }
          l_strPlateNumber_TopStack1 = StrRight(l_strPlateNumber_TopStack1, 1);
          l_intPlateNumber_TopStack1 = StrIVal(l_strPlateNumber_TopStack1);
        }
        if (l_strPlateNumber_TopStack1 == "")
        {
          l_intPlateNumber_TopStack1 = 0;
        }
      }
      Trace ("The number of plates found in Stack 1:  ", l_intPlateNumber_TopStack1);
      Trace ("Expected number of plates for Stack 1:  ", i_intStack1ExpectedNumberOfPlates);
      if (l_intPlateNumber_TopStack1 == i_intStack1ExpectedNumberOfPlates)
      {
        o_strMessageResult = o_strMessageResult + Translate("\nThe correct number of plates are in Stack1.");
      }
      else
      {
        o_strMessageResult = o_strMessageResult + Translate("\nWARNING:  Wrong number of plates is in Stack1.  Expected:  ");
        o_strMessageResult = StrConcat2(o_strMessageResult, i_intStack1ExpectedNumberOfPlates);
        o_strMessageResult = o_strMessageResult + Translate(" Found:  ");
        o_strMessageResult = StrConcat2(o_strMessageResult, l_intPlateNumber_TopStack1);
        o_intResultCheckOfFalseLoading = 1;
        SeqResetSequenceIndexes(i_seqStack1);
      }
    }
    if (i_intStack2ExpectedNumberOfPlates > 0)
    {
      if(0){
        TrcTraceSequence(i_seqStack2);
      }
      if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
      {
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
        l_intPlateNumber_TopStack2 = i_intStack2ExpectedNumberOfPlates;
        l_strPlateNumber_TopStack2 = Translate("1");
      }
      else
      {
        if (t_intTransportTool == 2)
        {
          l_intMaxNumberOfPlatesWithinCurrentStack = SeqGetMax(i_seqStack2);
          {
            for(l_intCurrentLoopNumberOfPlatesWithinCurrentStack = 0; l_intCurrentLoopNumberOfPlatesWithinCurrentStack < l_intMaxNumberOfPlatesWithinCurrentStack;)
            {
              l_intCurrentLoopNumberOfPlatesWithinCurrentStack = l_intCurrentLoopNumberOfPlatesWithinCurrentStack + 1;
              onerror goto errLabel_4 ;
              err.Clear();
              {
                	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
              }
              l_strCurrentLabID = SeqGetLabwareId(i_seqStack2);
              l_strPlateNumber_TopStack2 = StrRight(l_strCurrentLabID, 1);
              l_intPlateNumber_TopStack2 = StrIVal(l_strPlateNumber_TopStack2);
              break;
              errLabel_4 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                SeqIncrement(i_seqStack2, 1);
              }   /* end if from skip handler if no error */
            }
          }
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._8E745E0A_158E_425e_BD3E_2F894E354A40("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"); // GetFirstPlatePosition
            	l_strPlateNumber_TopStack2 = arrRetValues[3];
          }
          l_strPlateNumber_TopStack2 = StrRight(l_strPlateNumber_TopStack2, 1);
          l_intPlateNumber_TopStack2 = StrIVal(l_strPlateNumber_TopStack2);
        }
        if (l_strPlateNumber_TopStack2 == "")
        {
          l_intPlateNumber_TopStack2 = 0;
        }
      }
      Trace ("The number of plates found in Stack 2:  ", l_intPlateNumber_TopStack2);
      Trace ("Expected number of plates for Stack 2:  ", i_intStack2ExpectedNumberOfPlates);
      if (l_intPlateNumber_TopStack2 == i_intStack2ExpectedNumberOfPlates)
      {
        o_strMessageResult = o_strMessageResult + Translate("\nThe correct number of plates are in Stack2.");
      }
      else
      {
        o_strMessageResult = o_strMessageResult + Translate("\nWARNING:  Wrong number of plates is in Stack2.  Expected:  ");
        o_strMessageResult = StrConcat2(o_strMessageResult, i_intStack2ExpectedNumberOfPlates);
        o_strMessageResult = o_strMessageResult + Translate(" Found:  ");
        o_strMessageResult = StrConcat2(o_strMessageResult, l_intPlateNumber_TopStack2);
        o_intResultCheckOfFalseLoading = 1;
        SeqResetSequenceIndexes(i_seqStack2);
      }
    }
    if (i_intStack3ExpectedNumberOfPlates > 0)
    {
      if(0){
        TrcTraceSequence(i_seqStack3);
      }
      if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
      {
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
        l_intPlateNumber_TopStack3 = i_intStack3ExpectedNumberOfPlates;
        l_strPlateNumber_TopStack3 = Translate("1");
      }
      else
      {
        if (t_intTransportTool == 2)
        {
          l_intMaxNumberOfPlatesWithinCurrentStack = SeqGetMax(i_seqStack3);
          {
            for(l_intCurrentLoopNumberOfPlatesWithinCurrentStack = 0; l_intCurrentLoopNumberOfPlatesWithinCurrentStack < l_intMaxNumberOfPlatesWithinCurrentStack;)
            {
              l_intCurrentLoopNumberOfPlatesWithinCurrentStack = l_intCurrentLoopNumberOfPlatesWithinCurrentStack + 1;
              onerror goto errLabel_5 ;
              err.Clear();
              {
                	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
              }
              l_strCurrentLabID = SeqGetLabwareId(i_seqStack3);
              l_strPlateNumber_TopStack3 = StrRight(l_strCurrentLabID, 1);
              l_intPlateNumber_TopStack3 = StrIVal(l_strPlateNumber_TopStack3);
              break;
              errLabel_5 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                SeqIncrement(i_seqStack3, 1);
              }   /* end if from skip handler if no error */
            }
          }
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._8E745E0A_158E_425e_BD3E_2F894E354A40("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"); // GetFirstPlatePosition
            	l_strPlateNumber_TopStack3 = arrRetValues[3];
          }
          l_strPlateNumber_TopStack3 = StrRight(l_strPlateNumber_TopStack3, 1);
          l_intPlateNumber_TopStack3 = StrIVal(l_strPlateNumber_TopStack3);
        }
        if (l_strPlateNumber_TopStack3 == "")
        {
          l_intPlateNumber_TopStack3 = 0;
        }
      }
      Trace ("The number of plates found in Stack 3:  ", l_intPlateNumber_TopStack3);
      Trace ("Expected number of plates for Stack 3:  ", i_intStack3ExpectedNumberOfPlates);
      if (l_intPlateNumber_TopStack3 == i_intStack3ExpectedNumberOfPlates)
      {
        o_strMessageResult = o_strMessageResult + Translate("\nThe correct number of plates are in Stack3.");
      }
      else
      {
        o_strMessageResult = o_strMessageResult + Translate("\nWARNING:  Wrong number of plates is in Stack3.  Expected:  ");
        o_strMessageResult = StrConcat2(o_strMessageResult, i_intStack3ExpectedNumberOfPlates);
        o_strMessageResult = o_strMessageResult + Translate(" Found:  ");
        o_strMessageResult = StrConcat2(o_strMessageResult, l_intPlateNumber_TopStack3);
        o_intResultCheckOfFalseLoading = 1;
        SeqResetSequenceIndexes(i_seqStack3);
      }
    }
    if (i_intStack4ExpectedNumberOfPlates > 0)
    {
      if(0){
        TrcTraceSequence(i_seqStack4);
      }
      if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
      {
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
        l_intPlateNumber_TopStack4 = i_intStack4ExpectedNumberOfPlates;
        l_strPlateNumber_TopStack4 = Translate("1");
      }
      else
      {
        if (t_intTransportTool == 2)
        {
          l_intMaxNumberOfPlatesWithinCurrentStack = SeqGetMax(i_seqStack4);
          {
            for(l_intCurrentLoopNumberOfPlatesWithinCurrentStack = 0; l_intCurrentLoopNumberOfPlatesWithinCurrentStack < l_intMaxNumberOfPlatesWithinCurrentStack;)
            {
              l_intCurrentLoopNumberOfPlatesWithinCurrentStack = l_intCurrentLoopNumberOfPlatesWithinCurrentStack + 1;
              onerror goto errLabel_6 ;
              err.Clear();
              {
                	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
              }
              l_strCurrentLabID = SeqGetLabwareId(i_seqStack4);
              l_strPlateNumber_TopStack4 = StrRight(l_strCurrentLabID, 1);
              l_intPlateNumber_TopStack4 = StrIVal(l_strPlateNumber_TopStack4);
              break;
              errLabel_6 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                SeqIncrement(i_seqStack4, 1);
              }   /* end if from skip handler if no error */
            }
          }
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._8E745E0A_158E_425e_BD3E_2F894E354A40("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"); // GetFirstPlatePosition
            	l_strPlateNumber_TopStack4 = arrRetValues[3];
          }
          l_strPlateNumber_TopStack4 = StrRight(l_strPlateNumber_TopStack4, 1);
          l_intPlateNumber_TopStack4 = StrIVal(l_strPlateNumber_TopStack4);
        }
        if (l_strPlateNumber_TopStack4 == "")
        {
          l_intPlateNumber_TopStack4 = 0;
        }
      }
      Trace ("The number of plates found in Stack 4:  ", l_intPlateNumber_TopStack4);
      Trace ("Expected number of plates for Stack 4:  ", i_intStack4ExpectedNumberOfPlates);
      if (l_intPlateNumber_TopStack4 == i_intStack4ExpectedNumberOfPlates)
      {
        o_strMessageResult = o_strMessageResult + Translate("\nThe correct number of plates are in Stack4.");
      }
      else
      {
        o_strMessageResult = o_strMessageResult + Translate("\nWARNING:  Wrong number of plates is in Stack4.  Expected:  ");
        o_strMessageResult = StrConcat2(o_strMessageResult, i_intStack4ExpectedNumberOfPlates);
        o_intResultCheckOfFalseLoading = 1;
        o_strMessageResult = o_strMessageResult + Translate(" Found:  ");
        o_strMessageResult = StrConcat2(o_strMessageResult, l_intPlateNumber_TopStack4);
        SeqResetSequenceIndexes(i_seqStack4);
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate(">>>>>>>>>>Submethod Complete : DATA_CheckPlatesInStacks<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_TipCounterWrite( device & ML_STAR ) void {
    private variable l_intCurrentPosition_300;
    private variable l_intEndPosition_300;
    private variable l_intCurrentPosition_1000;
    private variable l_intCurrentPosition_50;
    private variable l_intEndPosition_1000;
    private variable l_intEndPosition_50;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  DATA_TipCounterWrite<<<<<<<<<<"));
    if(0){
      Trace("Write current tip status to database using following tipcounter . t_strTipCounterNameTip50 : ",t_strTipCounterNameTip50," ; t_strTipCounterNameTip300 : ",t_strTipCounterNameTip300," ; t_strTipCounterNameTip1000 : ",t_strTipCounterNameTip1000);
    }
    TipCount::Write2(t_seqTips50, t_strTipCounterNameTip50, ML_STAR);
    l_intCurrentPosition_50 = t_seqTips50.GetCurrentPosition();
    l_intEndPosition_50 = t_seqTips50.GetCount();
    TipCount::Write2(t_seqTips300, t_strTipCounterNameTip300, ML_STAR);
    l_intCurrentPosition_300 = t_seqTips300.GetCurrentPosition();
    l_intEndPosition_300 = t_seqTips300.GetCount();
    TipCount::Write2(t_seqTips1000, t_strTipCounterNameTip1000, ML_STAR);
    l_intCurrentPosition_1000 = t_seqTips1000.GetCurrentPosition();
    l_intEndPosition_1000 = t_seqTips1000.GetCount();
    if(0){
      TrcTrace12(Translate("CurrentPosition_300 : "), l_intCurrentPosition_300, Translate(" - EndPosition_300 : "), l_intEndPosition_300, Translate("CurrentPosition_1000 : "), l_intCurrentPosition_1000, Translate(" - EndPosition_1000 : "), l_intEndPosition_1000, Translate("CurrentPosition_50 : "), l_intCurrentPosition_50, Translate(" - EndPosition_50 : "), l_intEndPosition_50);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_TipCounterWrite <<<<<<<<<<\n"));
  }

  private function _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport( variable i_strStepReturnValueAspiration, variable i_strStepReturnValueDispense ) void {
    private file l_hdlNGSStarReportFile2;
    private variable l_intGetPositionFromNum;
    private variable l_intIndexNumberOfPositions;
    private variable l_intNumberOfPositions;
    private variable l_strCurrentDate;
    private variable l_strCurrentTime;
    private variable l_strCurrentLabIDSource;
    private variable l_strCurrentLabIDTarget;
    private variable l_strCurrentPosIDSource;
    private variable l_strCurrentPosIDTarget;
    private variable l_strGetStepData;
    private variable l_intGetErrorRecovery;
    private variable l_intGetSlaveErrorCode;
    private variable l_intGetMainErrorCode;
    private variable l_strTranslatedPipettingInformationDispense;
    private variable l_strTranslatedPipettingInformationAspiration;
    private variable l_strGetBarcodeTarget;
    private variable l_strGetBarcodeSource;
    private variable l_strEmptyString;
    if(0){
      Trace ("StepReturnValue Aspiration to be analyzed :  ", i_strStepReturnValueAspiration);
      Trace ("StepReturnValue Dispense to be analyzed :  ", i_strStepReturnValueDispense);
    }
    l_strCurrentDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    l_strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    if(0){
      Trace ("Update Current Date                :  ", l_strCurrentDate);
      Trace ("Update Current Time                :  ", l_strCurrentTime);
    }
    l_strEmptyString = Translate("");
    onerror goto errLabel_7 ;
    err.Clear();
    l_hdlNGSStarReportFile2.AddField("Date", l_strCurrentDate, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Time", l_strCurrentTime, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Source", l_strCurrentLabIDSource, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Source", l_strCurrentPosIDSource, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transfer Volume", l_strGetStepData, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Target", l_strCurrentLabIDTarget, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Target", l_strCurrentPosIDTarget, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Barcode", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transport information", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Aspiration information", l_strTranslatedPipettingInformationAspiration, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Dispense information", l_strTranslatedPipettingInformationDispense, hslString, 255);
    if( 0 == l_hdlNGSStarReportFile2.Open(t_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
    }
    errLabel_7 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      _DATA_IntegratedAbortHandler(Translate("NGSStarProcesses.smt "), Translate("_DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport. This smt writes labware ID time stamp and Position ID into a customized report file .xls format. Data based on step return value of channels only."));
    }   /* end if from skip handler if no error */
    l_intNumberOfPositions = StepReturn::GetNumberOfPositions(i_strStepReturnValueAspiration);
    {
      for(l_intIndexNumberOfPositions = 0; l_intIndexNumberOfPositions < l_intNumberOfPositions;)
      {
        l_intIndexNumberOfPositions = l_intIndexNumberOfPositions + 1;
        l_intGetPositionFromNum = StepReturn::GetPositionFromNum(l_intIndexNumberOfPositions, i_strStepReturnValueAspiration);
        l_strCurrentLabIDSource = StepReturn::GetLabwareId(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
        l_strCurrentPosIDSource = StepReturn::GetPositionId(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
        if(0){
          l_strGetStepData = StepReturn::GetStepData(l_intIndexNumberOfPositions, i_strStepReturnValueAspiration);
        }
        l_strGetStepData = StepReturn::GetStepData(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
        if (l_strGetStepData != "")
        {
          if(0){
            l_intGetMainErrorCode = StepReturn::GetMainError(l_intIndexNumberOfPositions, i_strStepReturnValueAspiration);
          }
          l_intGetMainErrorCode = StepReturn::GetMainError(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
          if(0){
            l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intIndexNumberOfPositions, i_strStepReturnValueAspiration);
          }
          l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
          if(0){
            l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intIndexNumberOfPositions, i_strStepReturnValueAspiration);
          }
          l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
          _DATA_TranslateChannelErrorCodes(1, l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedPipettingInformationAspiration);
          if(0){
            Trace ("Update Current LabID Source        :  ", l_strCurrentLabIDSource);
            Trace ("Update Current PosID Source        :  ", l_strCurrentPosIDSource);
          }
        }
        l_intGetPositionFromNum = StepReturn::GetPositionFromNum(l_intIndexNumberOfPositions, i_strStepReturnValueDispense);
        l_strCurrentLabIDTarget = StepReturn::GetLabwareId(l_intGetPositionFromNum, i_strStepReturnValueDispense);
        l_strCurrentPosIDTarget = StepReturn::GetPositionId(l_intGetPositionFromNum, i_strStepReturnValueDispense);
        if(0){
          l_strGetStepData = StepReturn::GetStepData(l_intIndexNumberOfPositions, i_strStepReturnValueDispense);
        }
        l_strGetStepData = StepReturn::GetStepData(l_intGetPositionFromNum, i_strStepReturnValueDispense);
        if (l_strGetStepData != "")
        {
          if(0){
            Trace ("Update Current Transfer Volume     :  ", l_strGetStepData);
            Trace ("Update Current LabID Target        :  ", l_strCurrentLabIDTarget);
            Trace ("Update Current PosID Target        :  ", l_strCurrentPosIDTarget);
          }
          if(0){
            l_intGetMainErrorCode = StepReturn::GetMainError(l_intIndexNumberOfPositions, i_strStepReturnValueDispense);
          }
          l_intGetMainErrorCode = StepReturn::GetMainError(l_intGetPositionFromNum, i_strStepReturnValueDispense);
          if(0){
            l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intIndexNumberOfPositions, i_strStepReturnValueDispense);
          }
          l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intGetPositionFromNum, i_strStepReturnValueDispense);
          if(0){
            l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intIndexNumberOfPositions, i_strStepReturnValueDispense);
          }
          l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intGetPositionFromNum, i_strStepReturnValueDispense);
          if(0){
            Trace("BARCODE SOURCE : ", l_strGetBarcodeSource ,"BARCODE TARGET : ", l_strGetBarcodeTarget);
          }
          _DATA_TranslateChannelErrorCodes(1, l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedPipettingInformationDispense);
          if( 0 == l_hdlNGSStarReportFile2.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
    }
    if( 0 != l_hdlNGSStarReportFile2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlNGSStarReportFile2.RemoveFields();
  }

  function Trp_HSPDownholder( device & ML_STAR, sequence & i_seqDownholderSourcePosition, sequence & i_seqDownholderDestinationPosition, variable i_blnParkTransportToolAfterMove, variable i_blnDownholderSourcePositionIsOnPlate, variable i_blnDownholderDestinationPositionIsOnPlate ) void {
    private variable l_fltCOREGriperpOpeningWidthBeforeAccess;
    private variable l_fltCOREGripperWidth;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strTransportTool;
    private variable l_strStepReturnValueCOREGetPlate;
    private variable l_strStepReturnValueCOREPlacePlate;
    private variable o_strReadCurrentBarcode;
    private variable l_strInformationToBeUpdated;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Trp_HSPDownholder <<<<<<<<<<"));
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqDownholderSourcePosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDownholderDestinationPosition);
    if (t_intTransportTool == 1)
    {
      l_strTransportTool = Translate("iSWAP");
    }
    else
    {
      if (t_intTransportTool == 2)
      {
        l_strTransportTool = Translate("CORE gripper");
      }
      else
      {
        l_strTransportTool = Translate("undefined tool - check definition");
      }
    }
    if(0){
      l_strInformationToBeUpdated = StrConcat8(Translate("Transport Downholder"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Tool used : "), l_strTransportTool, Translate("."));
      l_strInformationToBeUpdated = Translate("");
      DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    }
    if (i_blnDownholderSourcePositionIsOnPlate == 1)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqDownholderSourcePosition, 0, 0, 8);
    }
    else
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqDownholderSourcePosition, 0, 0, 6);
    }
    if (i_blnDownholderDestinationPositionIsOnPlate == 1)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqDownholderDestinationPosition, 0, 0, 8);
    }
    else
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqDownholderDestinationPosition, 0, 0, 6);
    }
    if (t_intTransportTool == 1)
    {
      MECC::TraceComment(Translate("Using iSWAP for Adapter Movements"));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        	l_strStepReturnValueCOREGetPlate = arrRetValues[2];
      }
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
        	l_strStepReturnValueCOREPlacePlate = arrRetValues[2];
      }
      if (i_blnParkTransportToolAfterMove == 1)
      {
        ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
    }
    if (t_intTransportTool == 2)
    {
      MECC::TraceComment(Translate("Using CORE grippers for adapter movements"));
      l_fltCOREGripperWidth = 79.5;
      l_fltCOREGriperpOpeningWidthBeforeAccess = 87;
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        	l_strStepReturnValueCOREGetPlate = arrRetValues[2];
      }
      if (i_blnParkTransportToolAfterMove == 1)
      {
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          	l_strStepReturnValueCOREPlacePlate = arrRetValues[2];
        }
      }
      else
      {
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          	l_strStepReturnValueCOREPlacePlate = arrRetValues[2];
        }
      }
    }
    if (i_blnDownholderSourcePositionIsOnPlate == 1)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqDownholderSourcePosition, 0, 0, -8);
    }
    else
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqDownholderSourcePosition, 0, 0, -6);
    }
    if (i_blnDownholderDestinationPositionIsOnPlate == 1)
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqDownholderDestinationPosition, 0, 0, -8);
    }
    else
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqDownholderDestinationPosition, 0, 0, -6);
    }
    o_strReadCurrentBarcode = Translate("");
    _DATA_AnalyzeStepReturnValueOfTransportStepAndWriteToNGSStarReport(l_strStepReturnValueCOREGetPlate, l_strStepReturnValueCOREPlacePlate, t_intTransportTool, o_strReadCurrentBarcode);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Trp_HSPDownholder <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_MPH_Supernatant_SVFT_SingleDispenseFromPlateToWaste( device & ML_STAR, sequence & i_seqAspirationPosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intNumberOfSamples ) void {
    private variable l_fltVolumeDelta;
    private sequence l_seqDispensePosition;
    private variable l_strCurrentDispenseMode;
    private variable l_strStepReturnValueAspiration;
    private variable l_strStepReturnValueDispense;
    private variable l_fltVolumeAsp1;
    private variable l_fltVolumeAsp2;
    private variable l_intCurrentTipType;
    private variable l_intCurrentDispenseMode;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strInformationToBeUpdated;
    private variable l_strVolume;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    private variable l_intTotalColumns;
    private variable l_intRemainder;
    private sequence i_seqDispensePosition;
    private sequence l_seqTempAspirationPosition;
    private sequence l_seqTempDispensePosition;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_Supernatant_SVFT_MPHSingleDispenseFromPlateToWasteMPH <<<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strVolume = StrFStr(i_fltVolume);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Remove supernatant using MPH"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), Translate(" default waste MPH96"), Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqAspirationPosition);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      _DATA_ScheduleTips(i_seqAspirationPosition, ASWGLOBAL::BOOL::TRUE, l_intCurrentTipType, ASWGLOBAL::BOOL::TRUE);
      _DATA_PlausibilityCheckVolume(i_fltVolume, l_intCurrentTipType);
      l_fltVolumeDelta = 300 - i_fltVolume;
      if (l_fltVolumeDelta < 20)
      {
        l_fltVolumeAsp1 = 280;
        l_fltVolumeAsp2 = 20;
      }
      else
      {
        l_fltVolumeAsp1 = i_fltVolume;
        l_fltVolumeAsp2 = 20;
      }
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        SeqResetSequenceIndexes(i_seqAspirationPosition);
        i_seqAspirationPosition.SetCurrentPosition(1);
        i_seqAspirationPosition.SetCount(96);
        l_intTotalColumns = i_intNumberOfSamples / 8;
        l_intRemainder = i_intNumberOfSamples % 8;
        if (l_intRemainder > 0)
        {
          l_intTotalColumns = l_intTotalColumns + 1;
        }
        if (l_intCurrentTipType == 1)
        {
          if (t_intTiptypePreloadedAtSupportBlock == 0)
          {
            PIP_CleanUpTipAdapter(ML_STAR, ASWGLOBAL::BOOL::FALSE);
          }
          else
          {
            if (t_intTiptypePreloadedAtSupportBlock == 23)
            {
              PIP_CleanUpTipAdapter(ML_STAR, ASWGLOBAL::BOOL::TRUE);
            }
          }
          STAR_MPH96_TOOLS::TIP_OFFSET_PickUpTips_Column(ML_STAR, t_seqTips300, t_arrTipAdapters.ElementAt( 2 -1), l_intTotalColumns, t_strTipCounterNameTip300, ASWGLOBAL::BOOL::FALSE);
          t_intTiptypePreloadedAtSupportBlock = 1;
          _DATA_MPH_ProvideSequence96Plate(i_seqAspirationPosition, i_seqDispensePosition, l_seqTempAspirationPosition, l_seqTempDispensePosition);
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            	l_strStepReturnValueAspiration = arrRetValues[2];
          }
          MECC::TraceComment(Translate("consecutive aspiration step to remove residual EtOH"));
          _DATA_MPH_ProvideSequence96Plate(i_seqAspirationPosition, i_seqDispensePosition, l_seqTempAspirationPosition, l_seqTempDispensePosition);
          ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
          DATA_TipCounterWrite(ML_STAR);
          i_seqAspirationPosition.SetCount(i_intNumberOfSamples);
          _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReportMPH(l_strStepReturnValueAspiration, l_strStepReturnValueDispense, i_seqAspirationPosition, l_seqDispensePosition, ASWGLOBAL::BOOL::TRUE);
        }
        else
        {
          MECC::TraceComment(Translate("WRONG TIPTYPE DETECTED"));
          VectorCustomDialogs::ErrorDialog(Translate("Error indication - unsupported tiptye"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Unsupported tiptype detected."), Translate(""));
          abort;
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        VectorCustomDialogs::ErrorDialog(Translate("Error Indication - Unsupported Dispense Mode"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Unsupported dispense mode detected."), Translate(""));
        abort;
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_Supernatant_SVFT_MPHSingleDispenseFromPlateToWasteMPH <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function Trp_TipsWithMPH( device & ML_STAR, sequence & i_seqTipPickUpPosition, sequence & i_seqTipEjectPosition, variable i_blnCountTipsAtTipPickUpPosition ) void {
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strInformationToBeUpdated;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Trp_TipsWithMPH <<<<<<<<<<"));
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqTipPickUpPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqTipEjectPosition);
    l_strInformationToBeUpdated = StrConcat8(Translate("Transport tips with MPH"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Tool used : "), Translate("MPH96"), Translate("."));
    DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (i_blnCountTipsAtTipPickUpPosition == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      DATA_TipCounterWrite(ML_STAR);
    }
    else
    {
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Trp_TipsWithMPH <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReportMPH( variable i_strStepReturnValueAspiration, variable i_strStepReturnValueDispense, sequence i_seqAspiration, sequence i_seqDispense, variable i_blnAnalyseAspirationSetpReturnOnly ) void {
    private file l_hdlNGSStarReportFile2;
    private variable l_CountLineWithinReportFile;
    private variable l_strCurrentDate;
    private variable l_strCurrentTime;
    private variable l_strCurrentLabIDSource;
    private variable l_strCurrentLabIDTarget;
    private variable l_strCurrentPosIDSource;
    private variable l_strCurrentPosIDTarget;
    private variable l_strGetStepData;
    private variable l_intNumberOfPositions;
    private variable l_intGetPositionFromNum;
    private variable l_intIndexNumberOfPositions;
    private variable l_strTranslatedPipettingInformationDispense;
    private variable l_strTranslatedPipettingInformationAspiration;
    private variable l_intGetErrorRecovery;
    private variable l_intGetSlaveErrorCode;
    private variable l_intGetMainErrorCode;
    private variable l_strEmptyString;
    if(0){
      Trace ("StepReturnValue Aspiration to be analyzed :  ", i_strStepReturnValueAspiration);
      Trace ("StepReturnValue Dispense to be analyzed :  ", i_strStepReturnValueDispense);
    }
    l_strCurrentDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    l_strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    if(0){
      Trace ("Update Current Date                :  ", l_strCurrentDate);
      Trace ("Update Current Time                :  ", l_strCurrentTime);
    }
    l_strEmptyString = Translate("");
    onerror goto errLabel_8 ;
    err.Clear();
    l_hdlNGSStarReportFile2.AddField("Date", l_strCurrentDate, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Time", l_strCurrentTime, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Source", l_strCurrentLabIDSource, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Source", l_strCurrentPosIDSource, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transfer Volume", l_strGetStepData, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Target", l_strCurrentLabIDTarget, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Target", l_strCurrentPosIDTarget, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Barcode", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transport information", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Aspiration information", l_strTranslatedPipettingInformationAspiration, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Dispense information", l_strTranslatedPipettingInformationDispense, hslString, 255);
    if( 0 == l_hdlNGSStarReportFile2.Open(t_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
    }
    errLabel_8 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      _DATA_IntegratedAbortHandler(Translate("NGSStarProcesses.smt "), Translate("_DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReportMPH. This smt writes labware ID time stamp and Position ID into a customized report file .xls format. Data based on step return value of MPH only."));
    }   /* end if from skip handler if no error */
    l_intNumberOfPositions = StepReturn::GetNumberOfPositions(i_strStepReturnValueAspiration);
    {
      l_CountLineWithinReportFile = 0;
      while (
         (i_seqAspiration.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqAspiration, 1, i_seqDispense, 1);
        l_CountLineWithinReportFile = l_CountLineWithinReportFile + 1;
        l_intIndexNumberOfPositions = 1;
        l_strCurrentPosIDSource = SeqGetPositionId(i_seqAspiration);
        SeqIncrement(i_seqAspiration, 1);
        l_intGetPositionFromNum = StepReturn::GetPositionFromNum(l_intIndexNumberOfPositions, i_strStepReturnValueAspiration);
        l_strCurrentLabIDSource = StepReturn::GetLabwareId(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
        if (i_blnAnalyseAspirationSetpReturnOnly == ASWGLOBAL::BOOL::FALSE)
        {
          l_strCurrentPosIDTarget = SeqGetPositionId(i_seqDispense);
          SeqIncrement(i_seqDispense, 1);
          l_strCurrentLabIDTarget = StepReturn::GetLabwareId(l_intGetPositionFromNum, i_strStepReturnValueDispense);
          if(0){
            l_intGetMainErrorCode = StepReturn::GetMainError(l_intIndexNumberOfPositions, i_strStepReturnValueDispense);
          }
          l_intGetMainErrorCode = StepReturn::GetMainError(l_intGetPositionFromNum, i_strStepReturnValueDispense);
          if(0){
            l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intIndexNumberOfPositions, i_strStepReturnValueDispense);
          }
          l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intGetPositionFromNum, i_strStepReturnValueDispense);
          if(0){
            l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intIndexNumberOfPositions, i_strStepReturnValueDispense);
          }
          l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intGetPositionFromNum, i_strStepReturnValueDispense);
          _DATA_TranslateChannelErrorCodes(1, l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedPipettingInformationDispense);
        }
        else
        {
          l_strCurrentLabIDTarget = Translate("discarded to waste MPH 96");
          l_strCurrentPosIDTarget = l_strCurrentPosIDSource;
        }
        if(0){
          l_strGetStepData = StepReturn::GetStepData(l_intIndexNumberOfPositions, i_strStepReturnValueAspiration);
        }
        l_strGetStepData = StepReturn::GetStepData(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
        if(0){
          l_intGetMainErrorCode = StepReturn::GetMainError(l_intIndexNumberOfPositions, i_strStepReturnValueAspiration);
        }
        l_intGetMainErrorCode = StepReturn::GetMainError(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
        if(0){
          l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intIndexNumberOfPositions, i_strStepReturnValueAspiration);
        }
        l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
        if(0){
          l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intIndexNumberOfPositions, i_strStepReturnValueAspiration);
        }
        l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
        _DATA_TranslateChannelErrorCodes(1, l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedPipettingInformationAspiration);
        if (l_strGetStepData != "")
        {
          if( 0 == l_hdlNGSStarReportFile2.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        if (
           (i_seqAspiration.GetCurrentPosition() > 0 && i_seqAspiration.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqAspiration.SetMax(i_seqAspiration.GetTotal());
      i_seqDispense.SetMax(i_seqDispense.GetTotal());
      i_seqAspiration.SetCurrentPosition(1);
      i_seqDispense.SetCurrentPosition(1);
    }
    if( 0 != l_hdlNGSStarReportFile2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlNGSStarReportFile2.RemoveFields();
  }

  function PIP_ReagentsFromTubeOrTroughOrPlateToPlateWithVolumeArray( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable & i_arrFltVolume[], variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtDispenseOnFixHeight ) void {
    private variable l_fltVolumeOfCurrentArrayIndex;
    private variable l_intMainLoopTransferLiquids;
    private variable l_intArrayIndexCounter;
    private variable l_intArrFltVolumeIndex;
    private variable l_intCurrentDispenseMode;
    private variable l_intCurrentTipType;
    private variable l_intNumberOfSamples;
    private variable l_intSizeArrFltVolume;
    private variable l_strCurrentDispenseMode;
    private variable l_strLabwareIDAspiration;
    private variable l_strStepReturnValueDispense;
    private variable l_strStepReturnValueAspiration;
    private variable l_strTypeOfLabware;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_blnActivateLiquidFollowing;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_ReagentsFromTubeOrTroughOrPlateToPlateWithVolumeArray<<<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering independent volumes per channel"), Translate(""), Translate(""));
    DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_intSizeArrFltVolume=i_arrFltVolume.GetSize();
      {
        for(l_intArrFltVolumeIndex = 0; l_intArrFltVolumeIndex < l_intSizeArrFltVolume;)
        {
          l_intArrFltVolumeIndex = l_intArrFltVolumeIndex + 1;
          l_fltVolumeOfCurrentArrayIndex=i_arrFltVolume.GetAt(l_intArrFltVolumeIndex-1);
          _DATA_PlausibilityCheckVolume(l_fltVolumeOfCurrentArrayIndex, l_intCurrentTipType);
        }
      }
      l_strLabwareIDAspiration = SeqGetLabwareId(i_seqAspirationPosition);
      _DATA_InterpreteLabwareID(l_strLabwareIDAspiration, l_strTypeOfLabware);
      l_intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        _DATA_ScheduleTips(i_seqDispensePosition, i_blnTipExchangeDuringTransfer, l_intCurrentTipType, ASWGLOBAL::BOOL::FALSE);
        if (l_strTypeOfLabware == "tube")
        {
        }
        if (l_strTypeOfLabware == "trough")
        {
        }
        MECC::TraceComment(Translate("********** Now pipetting reagents to destination plate"));
        l_intArrayIndexCounter = 1;
        if (l_intCurrentTipType == 1)
        {
          {
            l_intMainLoopTransferLiquids = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, i_seqDispensePosition, 1, t_seqTips300, 1);
              l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (l_intMainLoopTransferLiquids == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              if (i_fltAspirateHeightFromBottom == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                if (i_fltAspirateHeightFromBottom <= 1.8)
                {
                  l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
                }
                else
                {
                  l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              if (i_fltDispenseHeightFromBottom == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              else
              {
                if(0){
                  if (i_fltDispenseHeightFromBottom <= 3)
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
                  }
                  else
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
                  }
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                _EjectTips(ML_STAR, ML_STAR.Waste08);
              }
              DATA_TipCounterWrite(ML_STAR);
              l_intArrayIndexCounter = l_intArrayIndexCounter + 8;
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            t_seqTips300.SetMax(t_seqTips300.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (l_intCurrentTipType == 5)
        {
          {
            l_intMainLoopTransferLiquids = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, i_seqDispensePosition, 1, t_seqTips1000, 1);
              l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (l_intMainLoopTransferLiquids == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              if (i_fltAspirateHeightFromBottom == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                if (i_fltAspirateHeightFromBottom <= 1.8)
                {
                  l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
                }
                else
                {
                  l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              if (i_fltDispenseHeightFromBottom == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              else
              {
                if(0){
                  if (i_fltDispenseHeightFromBottom <= 3)
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
                  }
                  else
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
                  }
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                _EjectTips(ML_STAR, ML_STAR.Waste08);
              }
              DATA_TipCounterWrite(ML_STAR);
              l_intArrayIndexCounter = l_intArrayIndexCounter + 8;
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            t_seqTips1000.SetMax(t_seqTips1000.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (l_intCurrentTipType == 23)
        {
          {
            l_intMainLoopTransferLiquids = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, i_seqDispensePosition, 1, t_seqTips50, 1);
              l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              else
              {
                if (l_intMainLoopTransferLiquids == 1)
                {
                  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                }
              }
              if (i_fltAspirateHeightFromBottom == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                if (i_fltAspirateHeightFromBottom <= 1.8)
                {
                  l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
                }
                else
                {
                  l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              if (i_fltDispenseHeightFromBottom == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              else
              {
                if(0){
                  if (i_fltDispenseHeightFromBottom <= 3)
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
                  }
                  else
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
                  }
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
              if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                _EjectTips(ML_STAR, ML_STAR.Waste08);
              }
              DATA_TipCounterWrite(ML_STAR);
              l_intArrayIndexCounter = l_intArrayIndexCounter + 8;
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            t_seqTips50.SetMax(t_seqTips50.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
        {
          _EjectTips(ML_STAR, ML_STAR.Waste08);
        }
      }
      if (l_strCurrentDispenseMode == "Part")
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        VectorCustomDialogs::ErrorDialog(Translate("Error Indication - Unsupported Dispense Mode"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Unsupported dispense mode detected."), Translate(""));
        abort;
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, i_seqAspirationPosition);
      {
        variable _FilterIdsArray_9[];
        variable _ColumnIdsArray_9[];
        variable _ColumnNamesArray_9[];
        variable _ExperimentsArray_9[];
        _FilterIdsArray_9.SetSize(0);
        _ColumnNamesArray_9.SetSize(14);
        _ColumnIdsArray_9.SetSize(14);
        _ColumnNamesArray_9.SetAt(0, "RecordId");
        _ColumnIdsArray_9.SetAt(0, 0);
        _ColumnNamesArray_9.SetAt(1, "TRackBC");
        _ColumnIdsArray_9.SetAt(1, 1);
        _ColumnNamesArray_9.SetAt(2, "TLabwareId");
        _ColumnIdsArray_9.SetAt(2, 2);
        _ColumnNamesArray_9.SetAt(3, "TPositionId");
        _ColumnIdsArray_9.SetAt(3, 3);
        _ColumnNamesArray_9.SetAt(4, "TPositionBC");
        _ColumnIdsArray_9.SetAt(4, 4);
        _ColumnNamesArray_9.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_9.SetAt(5, 5);
        _ColumnNamesArray_9.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_9.SetAt(6, 6);
        _ColumnNamesArray_9.SetAt(7, "TVolume");
        _ColumnIdsArray_9.SetAt(7, 7);
        _ColumnNamesArray_9.SetAt(8, "SRackBC");
        _ColumnIdsArray_9.SetAt(8, 8);
        _ColumnNamesArray_9.SetAt(9, "SLabwareId");
        _ColumnIdsArray_9.SetAt(9, 9);
        _ColumnNamesArray_9.SetAt(10, "SPositionId");
        _ColumnIdsArray_9.SetAt(10, 10);
        _ColumnNamesArray_9.SetAt(11, "SPositionBC");
        _ColumnIdsArray_9.SetAt(11, 11);
        _ColumnNamesArray_9.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_9.SetAt(12, 12);
        _ColumnNamesArray_9.SetAt(13, "UserName");
        _ColumnIdsArray_9.SetAt(13, 13);
        _ExperimentsArray_9.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqDispensePosition, 3, _FilterIdsArray_9, 0, _ColumnIdsArray_9, _ColumnNamesArray_9, _ExperimentsArray_9, "Reagents_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_ReagentsFromTubeOrTroughOrPlateToPlateWithVolumeArray\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_TipCounterRead( device & ML_STAR, variable i_intNumberOfTip50_required, variable i_intNumberOfTip300_required, variable i_intNumberOfTip1000_required, variable i_intTipTypeToBeProcessed, variable i_blnAlwaysEditTipcounter, variable i_blnShowGUITipAndTimeCalculation ) void {
    private variable l_blnReloadAllTipTypes;
    private variable l_blnProcessTip1000;
    private variable l_blnProcessTip300;
    private variable l_blnProcessTip50;
    private variable l_blnScheduleTipReloadDuringProcess;
    private variable l_intCalculatedQuantity_1000;
    private variable l_intCalculatedQuantity_300;
    private variable l_intCalculatedQuantity_50;
    private variable l_intCurrentPosition_1000;
    private variable l_intCurrentPosition_300;
    private variable l_intCurrentPosition_50;
    private variable l_intEndPosition_1000;
    private variable l_intEndPosition_300;
    private variable l_intEndPosition_50;
    private variable l_retValueDialog;
    private variable l_strText_Insufficient1000s;
    private variable l_strText_Insufficient300s;
    private variable l_strText_Insufficient50s;
    private variable l_intReturnValueMessageDialog;
    private variable l_arrListTipCalculationMessage[];
    private variable l_strLabwareIDCarrier;
    private variable loopCounter1;
    private variable l_strStepRetrunValueLoadCarrier;
    private variable l_strDisplayText_Insufficient50s;
    private variable l_strDisplayText_Insufficient300s;
    private variable l_strDisplayText_Insufficient1000s;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_TipCounterReadV2<<<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    Trace ("---Number of 50uL tips required: ", i_intNumberOfTip50_required);
    Trace ("---Number of 300uL tips required: ", i_intNumberOfTip300_required);
    Trace ("---Number of 1000uL tips required: ", i_intNumberOfTip1000_required);
    Trace("Read current tip status from database using following tipcounter . t_strTipCounterNameTip50 : ",t_strTipCounterNameTip50," ; t_strTipCounterNameTip300 : ",t_strTipCounterNameTip300," ; t_strTipCounterNameTip1000 : ",t_strTipCounterNameTip1000);
    l_blnProcessTip50 = ASWGLOBAL::BOOL::FALSE;
    l_blnProcessTip300 = ASWGLOBAL::BOOL::FALSE;
    l_blnProcessTip1000 = ASWGLOBAL::BOOL::FALSE;
    l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::FALSE;
    if (i_intTipTypeToBeProcessed == 4)
    {
      l_blnProcessTip50 = ASWGLOBAL::BOOL::TRUE;
      l_blnProcessTip300 = ASWGLOBAL::BOOL::TRUE;
      l_blnProcessTip1000 = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      if (i_intTipTypeToBeProcessed == 1)
      {
        l_blnProcessTip50 = ASWGLOBAL::BOOL::TRUE;
      }
      if (i_intTipTypeToBeProcessed == 2)
      {
        l_blnProcessTip300 = ASWGLOBAL::BOOL::TRUE;
      }
      if (i_intTipTypeToBeProcessed == 3)
      {
        l_blnProcessTip1000 = ASWGLOBAL::BOOL::TRUE;
      }
    }
    l_strText_Insufficient50s = Translate(" No reload of this tip type necessary");
    l_strText_Insufficient300s = Translate(" No reload of this tip type necessary");
    l_strText_Insufficient1000s = Translate(" No reload of this tip type necessary");
    if (l_blnProcessTip50 == ASWGLOBAL::BOOL::TRUE)
    {
      if (i_blnAlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        TipCount::Edit2(t_seqTips50, t_strTipCounterNameTip50, ML_STAR, 999);
        t_intMaxSeqTips50AfterEdit = t_seqTips50.GetCount();
        DATA_TipCounterWrite(ML_STAR);
      }
      else
      {
        TipCount::Read2(t_seqTips50, t_strTipCounterNameTip50, ML_STAR);
      }
      l_intCurrentPosition_50 = t_seqTips50.GetCurrentPosition();
      l_intEndPosition_50 = t_seqTips50.GetCount();
      l_intCalculatedQuantity_50 = l_intEndPosition_50 - l_intCurrentPosition_50;
      l_intCalculatedQuantity_50 = l_intCalculatedQuantity_50 + 1;
      t_intConsumedTips50 = t_intMaxSeqTips50AfterEdit - l_intCalculatedQuantity_50;
      if (t_intTotalConsumedTips50 < 0)
      {
        t_intConsumedTips50 = 0;
      }
      TrcTrace12(Translate("CurrentPosition_50 : "), l_intCurrentPosition_50, Translate(" - EndPosition_50 : "), l_intEndPosition_50, Translate(" - Quantity_50 : "), l_intCalculatedQuantity_50, Translate(" - _intMaxSeqTips50AfterEdit : "), t_intMaxSeqTips50AfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTips50 : "), t_intConsumedTips50);
      if (l_intCalculatedQuantity_50 < i_intNumberOfTip50_required)
      {
        t_blnInsuffientTips = 1;
        if (i_intNumberOfTip50_required > 960)
        {
          l_strText_Insufficient50s = Translate("\nPlease load two full carriers of 50ul tips.  You will need to come back later to replenish.");
        }
        else
        {
          l_strText_Insufficient50s = Translate("\nPlease load more 50ul tips.  You will need at least this many:  ");
          l_strText_Insufficient50s = StrConcat2(l_strText_Insufficient50s, i_intNumberOfTip50_required);
        }
      }
      else
      {
        l_strText_Insufficient50s = Translate(" No reload of this tip type necessary");
      }
    }
    if (l_blnProcessTip300 == ASWGLOBAL::BOOL::TRUE)
    {
      if (i_blnAlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        TipCount::Edit2(t_seqTips300, t_strTipCounterNameTip300, ML_STAR, 999);
        t_intMaxSeqTips300AfterEdit = t_seqTips300.GetCount();
        DATA_TipCounterWrite(ML_STAR);
      }
      else
      {
        TipCount::Read2(t_seqTips300, t_strTipCounterNameTip300, ML_STAR);
      }
      l_intCurrentPosition_300 = t_seqTips300.GetCurrentPosition();
      l_intEndPosition_300 = t_seqTips300.GetCount();
      l_intCalculatedQuantity_300 = l_intEndPosition_300 - l_intCurrentPosition_300;
      l_intCalculatedQuantity_300 = l_intCalculatedQuantity_300 + 1;
      t_intConsumedTips300 = t_intMaxSeqTips300AfterEdit - l_intCalculatedQuantity_300;
      if (t_intConsumedTips300 < 0)
      {
        t_intConsumedTips300 = 0;
      }
      TrcTrace12(Translate("CurrentPosition_300 : "), l_intCurrentPosition_300, Translate(" - EndPosition_300 : "), l_intEndPosition_300, Translate(" - Quantity_300 : "), l_intCalculatedQuantity_300, Translate(" - _intMaxSeqTips300AfterEdit : "), t_intMaxSeqTips300AfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTips300 : "), t_intConsumedTips300);
      if (l_intCalculatedQuantity_300 < i_intNumberOfTip300_required)
      {
        t_blnInsuffientTips = 1;
        if (i_intNumberOfTip300_required > 960)
        {
          l_strText_Insufficient300s = Translate("\nPlease load two full carriers of 300ul tips.  You will need to come back later to replenish.");
        }
        else
        {
          l_strText_Insufficient300s = Translate("\nPlease load more 300ul tips.  You will need at least this many:  ");
          l_strText_Insufficient300s = StrConcat2(l_strText_Insufficient300s, i_intNumberOfTip300_required);
        }
      }
      else
      {
        l_strText_Insufficient300s = Translate(" No reload of this tip type necessary");
      }
    }
    if (l_blnProcessTip1000 == ASWGLOBAL::BOOL::TRUE)
    {
      if (i_blnAlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        TipCount::Edit2(t_seqTips1000, t_strTipCounterNameTip1000, ML_STAR, 999);
        t_intMaxSeqTips1000AfterEdit = t_seqTips1000.GetCount();
        DATA_TipCounterWrite(ML_STAR);
      }
      else
      {
        TipCount::Read2(t_seqTips1000, t_strTipCounterNameTip1000, ML_STAR);
      }
      l_intCurrentPosition_1000 = t_seqTips1000.GetCurrentPosition();
      l_intEndPosition_1000 = t_seqTips1000.GetCount();
      l_intCalculatedQuantity_1000 = l_intEndPosition_1000 - l_intCurrentPosition_1000;
      l_intCalculatedQuantity_1000 = l_intCalculatedQuantity_1000 + 1;
      t_intConsumedTips1000 = t_intMaxSeqTips1000AfterEdit - l_intCalculatedQuantity_1000;
      if (t_intConsumedTips1000 < 0)
      {
        t_intConsumedTips1000 = 0;
      }
      TrcTrace12(Translate("CurrentPosition_1000 : "), l_intCurrentPosition_1000, Translate(" - EndPosition_1000 : "), l_intEndPosition_1000, Translate(" - Quantity_1000 : "), l_intCalculatedQuantity_1000, Translate(" - _intMaxSeqTips1000AfterEdit : "), t_intMaxSeqTips1000AfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTips1000 : "), t_intConsumedTips1000);
      if (l_intCalculatedQuantity_1000 < i_intNumberOfTip1000_required)
      {
        t_blnInsuffientTips = 1;
        if (i_intNumberOfTip1000_required > 96)
        {
          l_strText_Insufficient1000s = Translate("\nPlease load 2 (only 1 for MPH version) full racks of 1000ul tips.  You will need to come back later to replenish.");
        }
        else
        {
          l_strText_Insufficient1000s = Translate("\nPlease load more 1000ul tips.  You will need at least this many:  ");
          l_strText_Insufficient1000s = StrConcat2(l_strText_Insufficient1000s, i_intNumberOfTip1000_required);
        }
      }
      else
      {
        l_strText_Insufficient1000s = Translate(" No reload of this tip type necessary");
      }
    }
    if (t_blnInsuffientTips == 1)
    {
      if (l_blnProcessTip50 == ASWGLOBAL::BOOL::TRUE)
      {
        if (i_intNumberOfTip50_required > 960)
        {
          l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (l_blnProcessTip300 == ASWGLOBAL::BOOL::TRUE)
      {
        if (i_intNumberOfTip300_required > 960)
        {
          l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (l_blnProcessTip1000 == ASWGLOBAL::BOOL::TRUE)
      {
        if (t_blnReduceTip1000sequence == ASWGLOBAL::BOOL::TRUE)
        {
          if (i_intNumberOfTip1000_required > 96)
          {
            l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
          }
        }
        else
        {
          if (i_intNumberOfTip1000_required > 192)
          {
            l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
          }
        }
      }
      if (l_blnScheduleTipReloadDuringProcess == ASWGLOBAL::BOOL::TRUE)
      {
        l_arrListTipCalculationMessage.SetSize(0);
        l_strDisplayText_Insufficient50s = StrConcat2(Translate(" Tip type 50 ul filter : "), l_strText_Insufficient50s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient50s);
        l_strDisplayText_Insufficient300s = StrConcat2(Translate(" Tip type 300 ul filter : "), l_strText_Insufficient300s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient300s);
        l_strDisplayText_Insufficient1000s = StrConcat2(Translate(" Tip type 1000 ul filter : "), l_strText_Insufficient1000s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient1000s);
        VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Not enough tips available."), Translate("The amount of needed tips exceeds the maximum capacity of available tips. A reload step will be scheduled within the process."), l_arrListTipCalculationMessage);
        l_strText_Insufficient50s = Translate(" No reload of this tip type necessary");
        l_strText_Insufficient300s = Translate(" No reload of this tip type necessary");
        l_strText_Insufficient1000s = Translate(" No reload of this tip type necessary");
        l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::FALSE;
        t_blnInsuffientTips = ASWGLOBAL::BOOL::FALSE;
      }
      else
      {
        l_blnReloadAllTipTypes = ASWGLOBAL::BOOL::FALSE;
        l_arrListTipCalculationMessage.SetSize(0);
        l_strDisplayText_Insufficient50s = StrConcat2(Translate(" Tip type 50 ul filter : "), l_strText_Insufficient50s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient50s);
        l_strDisplayText_Insufficient300s = StrConcat2(Translate(" Tip type 300 ul filter : "), l_strText_Insufficient300s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient300s);
        l_strDisplayText_Insufficient1000s = StrConcat2(Translate(" Tip type 1000 ul filter : "), l_strText_Insufficient1000s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient1000s);
        l_retValueDialog = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Not enough tips available - refill tips according to shown list"), Translate("The amount of needed tips exceeds the maximum capacity of available tips. A reload step will be scheduled within the process."), l_arrListTipCalculationMessage);
        l_intReturnValueMessageDialog = VectorCustomDialogs::MessageDialog(Translate(""), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Preventative tip exchange : Do you want to take the chance to reload all tip types?"));
        if (l_intReturnValueMessageDialog == ASWGLOBAL::BOOL::YES)
        {
          l_blnReloadAllTipTypes = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          l_blnReloadAllTipTypes = ASWGLOBAL::BOOL::FALSE;
        }
      }
      if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
      }
      if (l_blnReloadAllTipTypes == ASWGLOBAL::BOOL::TRUE)
      {
        l_strText_Insufficient50s = Translate(" Preventive reload of this tip type necessary");
        l_strText_Insufficient300s = Translate(" Preventive reload of this tip type necessary");
        l_strText_Insufficient1000s = Translate(" Preventive reload of this tip type necessary");
      }
      if (l_strText_Insufficient50s != " No reload of this tip type necessary")
      {
        t_intConsumedTips50BeforeRelaodTips = t_intConsumedTips50;
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        }
        if (t_intNumberOfAllAvailableChannels == 8)
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_50F_PINK_0001");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_50F_PINK_0002");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
        else
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_A00_0001");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
        TipCount::Edit2(t_seqTips50, t_strTipCounterNameTip50, ML_STAR, 999);
        t_intMaxSeqTips50AfterEdit = t_seqTips50.GetCount();
        DATA_TipCounterWrite(ML_STAR);
        if (t_intNumberOfAllAvailableChannels == 8)
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_50F_PINK_0001");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_50F_PINK_0002");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        }
        else
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_A00_0001");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        }
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          {
            loopCounter1 = 0;
            while (1 == 1)
            {
              loopCounter1 = loopCounter1 + 1;
              onerror goto errLabel_10 ;
              err.Clear();
              ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              break;
              errLabel_10 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              }   /* end if from skip handler if no error */
            }
          }
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        }
      }
      if (l_strText_Insufficient300s != " No reload of this tip type necessary")
      {
        t_intConsumedTips300BeforeRelaodTips = t_intConsumedTips300;
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        }
        if (t_intNumberOfAllAvailableChannels == 8)
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_STF_YELLOW_0001");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_STF_YELLOW_0002");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
        else
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_A00_0002");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
        TipCount::Edit2(t_seqTips300, t_strTipCounterNameTip300, ML_STAR, 999);
        t_intMaxSeqTips300AfterEdit = t_seqTips300.GetCount();
        DATA_TipCounterWrite(ML_STAR);
        if (t_intNumberOfAllAvailableChannels == 8)
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_STF_YELLOW_0001");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_STF_YELLOW_0002");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        }
        else
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_A00_0002");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        }
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          {
            loopCounter1 = 0;
            while (1 == 1)
            {
              loopCounter1 = loopCounter1 + 1;
              onerror goto errLabel_11 ;
              err.Clear();
              ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              break;
              errLabel_11 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              }   /* end if from skip handler if no error */
            }
          }
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        }
      }
      if (l_strText_Insufficient1000s != " No reload of this tip type necessary")
      {
        t_intConsumedTips1000BeforeRelaodTips = t_intConsumedTips1000;
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        }
        l_strLabwareIDCarrier = ARW_Global::CarrierType::PLT_TIP1000;
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        TipCount::Edit2(t_seqTips1000, t_strTipCounterNameTip1000, ML_STAR, 999);
        t_intMaxSeqTips1000AfterEdit = t_seqTips1000.GetCount();
        DATA_TipCounterWrite(ML_STAR);
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
          	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
        }
        _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          {
            loopCounter1 = 0;
            while (1 == 1)
            {
              loopCounter1 = loopCounter1 + 1;
              onerror goto errLabel_12 ;
              err.Clear();
              ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              break;
              errLabel_12 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              }   /* end if from skip handler if no error */
            }
          }
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        }
      }
      t_blnInsuffientTips = ASWGLOBAL::BOOL::FALSE;
    }
    DATA_TipCounterWrite(ML_STAR);
    _DATA_TipAndTimeConsumption(i_blnShowGUITipAndTimeCalculation);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_TipCounterRead V2<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _DATA_TipAndTimeConsumption( variable i_blnShowDialog ) void {
    private variable l_fltElapsedTimeOfProccessTimer;
    private variable l_strElapsedTimeOfProccessTimer;
    private variable l_intScheduleTotalAmountOfSVFT;
    private variable l_intScheduleTotalAmountOfLVFT;
    private variable l_intScheduleTotalAmountOfHVFT;
    private variable l_arrListTipAndTimeConsumptionMessage[];
    private variable l_strScheduleTotalAmountOfHVFT;
    private variable l_strNumberOfSamples;
    private variable l_strScheduledNumberOfHVFTExtra;
    private variable l_strScheduledNumberOfHamiltonComfortLid;
    private variable l_strScheduledNumberOfLVFTPerSample;
    private variable l_strRunTime;
    private variable l_strScheduledNumberOfLVFTExtra;
    private variable l_strTotalConsumedTips300;
    private variable l_strScheduleTotalAmountOfSVFT;
    private variable l_strTotalConsumedTips50;
    private variable l_strScheduledNumberOfMIDI;
    private variable l_strScheduledNumberOfSVFTPerSample;
    private variable l_strScheduledNumberOfHSP;
    private variable l_strTotalConsumedTips1000;
    private variable l_strScheduledNumberOfHVFTPerSample;
    private variable l_strScheduleTotalAmountOfLVFT;
    private variable l_strScheduledNumberOfSVFTExtra;
    private variable l_intElapsedTimeOfProccessTimerHours;
    private variable l_strElapsedTimeOfProccessTimerSeconds;
    private variable l_fltElapsedTimeOfProccessTimerSeconds;
    private variable l_strElapsedTimeOfProccessTimerMinutes;
    private variable l_intElapsedTimeOfProccessTimerMinutes;
    private variable l_strElapsedTimeOfProccessTimerHours;
    private variable l_blnActivateCalculationForSeconds;
    private variable l_blnActivateCalculationForMinutes;
    private variable l_fltElapsedTimeOfProccessTimerRounded;
    private variable l_intElapsedTimeOfProccessTimer;
    private variable l_intElapsedTimeOfProccessTimerSeconds;
    private variable l_blnActivateCalculationForHours;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: DATA_TipAndTimeConsumption <<<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    Trace ("Consumed 1000ul filter tips before reload of tips :  ", t_intConsumedTips1000BeforeRelaodTips);
    Trace ("Consumed 300ul filter tips before reload of tips  :  ", t_intConsumedTips300BeforeRelaodTips);
    Trace ("Consumed 50ul filter tips before reload of tips   :  ", t_intConsumedTips50BeforeRelaodTips);
    Trace (" Consumed 1000ul filter tips :  ", t_intConsumedTips1000);
    Trace (" Consumed 300ul filter tips  :  ", t_intConsumedTips300);
    Trace (" Consumed 50ul filter tips   :  ", t_intConsumedTips50);
    // Calculate consumed tips
    t_intTotalConsumedTips1000  = t_intConsumedTips1000 + t_intConsumedTips1000BeforeRelaodTips;
    t_intTotalConsumedTips300  = t_intConsumedTips300 + t_intConsumedTips300BeforeRelaodTips;
    t_intTotalConsumedTips50  = t_intConsumedTips50 + t_intConsumedTips50BeforeRelaodTips;
    Trace (" --> Total consumed 1000ul filter tips :  ", t_intTotalConsumedTips1000);
    Trace (" --> Total consumed 300ul filter tips  :  ", t_intTotalConsumedTips300);
    Trace (" --> Total consumed 50ul filter tips   :  ", t_intTotalConsumedTips50);
    l_fltElapsedTimeOfProccessTimer = t_hdlProccessTimer.GetElapsedTime();
    l_fltElapsedTimeOfProccessTimerRounded = MthRound(l_fltElapsedTimeOfProccessTimer, 0);
    l_fltElapsedTimeOfProccessTimer = l_fltElapsedTimeOfProccessTimerRounded;
    if (l_fltElapsedTimeOfProccessTimer < 3600)
    {
      if (l_fltElapsedTimeOfProccessTimer < 60)
      {
        MECC::TraceComment(Translate("Time meassured less then 60s"));
        l_blnActivateCalculationForHours = ASWGLOBAL::BOOL::FALSE;
        l_blnActivateCalculationForMinutes = ASWGLOBAL::BOOL::FALSE;
        l_blnActivateCalculationForSeconds = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        MECC::TraceComment(Translate("Time meassured less then 3600s and bigger then 60s"));
        l_blnActivateCalculationForHours = ASWGLOBAL::BOOL::FALSE;
        l_blnActivateCalculationForMinutes = ASWGLOBAL::BOOL::TRUE;
        l_blnActivateCalculationForSeconds = ASWGLOBAL::BOOL::TRUE;
      }
    }
    else
    {
      MECC::TraceComment(Translate("Time meassured bigger then 3600s"));
      l_blnActivateCalculationForHours = ASWGLOBAL::BOOL::TRUE;
      l_blnActivateCalculationForMinutes = ASWGLOBAL::BOOL::TRUE;
      l_blnActivateCalculationForSeconds = ASWGLOBAL::BOOL::TRUE;
    }
    if (l_blnActivateCalculationForHours == ASWGLOBAL::BOOL::TRUE)
    {
      l_intElapsedTimeOfProccessTimerHours = l_fltElapsedTimeOfProccessTimer / 3600;
      Trace("check variable - l_intElapsedTimeOfProccessTimerHours :",l_intElapsedTimeOfProccessTimerHours);
      l_strElapsedTimeOfProccessTimerHours = StrIStr(l_intElapsedTimeOfProccessTimerHours);
      Trace("check variable - l_strElapsedTimeOfProccessTimerHours :",l_strElapsedTimeOfProccessTimerHours);
      l_fltElapsedTimeOfProccessTimerSeconds = l_fltElapsedTimeOfProccessTimer % 3600;
      Trace("check variable - l_fltElapsedTimeOfProccessTimerSeconds :",l_fltElapsedTimeOfProccessTimerSeconds);
      l_intElapsedTimeOfProccessTimerMinutes = l_fltElapsedTimeOfProccessTimerSeconds / 60;
      Trace("check variable - l_intElapsedTimeOfProccessTimerMinutes :",l_intElapsedTimeOfProccessTimerMinutes);
      l_strElapsedTimeOfProccessTimerMinutes = StrIStr(l_intElapsedTimeOfProccessTimerMinutes);
      Trace("check variable - l_strElapsedTimeOfProccessTimerMinutes :",l_strElapsedTimeOfProccessTimerMinutes);
      l_intElapsedTimeOfProccessTimerSeconds = l_fltElapsedTimeOfProccessTimerSeconds % 60;
      l_strElapsedTimeOfProccessTimerSeconds = StrIStr(l_intElapsedTimeOfProccessTimerSeconds);
      Trace("check variable - l_strElapsedTimeOfProccessTimerSeconds :",l_strElapsedTimeOfProccessTimerSeconds);
      l_blnActivateCalculationForMinutes = ASWGLOBAL::BOOL::FALSE;
      l_blnActivateCalculationForSeconds = ASWGLOBAL::BOOL::FALSE;
    }
    if (l_blnActivateCalculationForMinutes == ASWGLOBAL::BOOL::TRUE)
    {
      l_intElapsedTimeOfProccessTimerMinutes = l_fltElapsedTimeOfProccessTimer / 60;
      Trace("check variable - l_intElapsedTimeOfProccessTimerMinutes :",l_intElapsedTimeOfProccessTimerMinutes);
      l_strElapsedTimeOfProccessTimerMinutes = StrIStr(l_intElapsedTimeOfProccessTimerMinutes);
      Trace("check variable - l_strElapsedTimeOfProccessTimerMinutes :",l_strElapsedTimeOfProccessTimerMinutes);
      l_intElapsedTimeOfProccessTimerSeconds = l_fltElapsedTimeOfProccessTimer % 60;
      Trace("check variable - l_intElapsedTimeOfProccessTimerSeconds :",l_intElapsedTimeOfProccessTimerSeconds);
      l_strElapsedTimeOfProccessTimerSeconds = StrIStr(l_intElapsedTimeOfProccessTimerSeconds);
      l_blnActivateCalculationForSeconds = ASWGLOBAL::BOOL::FALSE;
    }
    if (l_blnActivateCalculationForSeconds == ASWGLOBAL::BOOL::TRUE)
    {
      l_intElapsedTimeOfProccessTimer = l_fltElapsedTimeOfProccessTimer / 1;
      l_strElapsedTimeOfProccessTimerSeconds = StrIStr(l_intElapsedTimeOfProccessTimer);
      Trace("check variable - l_strElapsedTimeOfProccessTimerSeconds :",l_strElapsedTimeOfProccessTimerSeconds);
    }
    l_strElapsedTimeOfProccessTimer = StrConcat12(l_strElapsedTimeOfProccessTimerHours, Translate(" hours - "), l_strElapsedTimeOfProccessTimerMinutes, Translate(" minutes - "), l_strElapsedTimeOfProccessTimerSeconds, Translate(" seconds"), Translate("."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Trace ("Elapsed time in seconds:  ", l_fltElapsedTimeOfProccessTimer);
    Trace ("Elapsed time formatted:  ", l_strElapsedTimeOfProccessTimer);
    if (t_intTotalConsumedTips50 < 0)
    {
      t_intTotalConsumedTips50 = 0;
    }
    if (t_intTotalConsumedTips300 < 0)
    {
      t_intTotalConsumedTips300 = 0;
    }
    if (t_intTotalConsumedTips1000 < 0)
    {
      t_intTotalConsumedTips1000 = 0;
    }
    if (i_blnShowDialog == ASWGLOBAL::BOOL::TRUE)
    {
      if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
      {
        l_intScheduleTotalAmountOfSVFT = t_intScheduledNumberOfSVFTPerSample * t_intGetTotalSequenceDispense;
        l_intScheduleTotalAmountOfSVFT = l_intScheduleTotalAmountOfSVFT + t_intScheduledNumberOfSVFTExtra;
        l_intScheduleTotalAmountOfHVFT = t_intScheduledNumberOfHVFTPerSample * t_intGetTotalSequenceDispense;
        l_intScheduleTotalAmountOfHVFT = l_intScheduleTotalAmountOfHVFT + t_intScheduledNumberOfHVFTExtra;
        l_intScheduleTotalAmountOfLVFT = t_intScheduledNumberOfLVFTPerSample * t_intGetTotalSequenceDispense;
        l_intScheduleTotalAmountOfLVFT = l_intScheduleTotalAmountOfLVFT + t_intScheduledNumberOfLVFTExtra;
        l_strNumberOfSamples = StrConcat2(Translate("Number of samples : "), t_intGetTotalSequenceDispense);
        l_strScheduleTotalAmountOfLVFT = StrIStr(l_intScheduleTotalAmountOfLVFT);
        l_strScheduledNumberOfLVFTPerSample = StrIStr(t_intScheduledNumberOfLVFTPerSample);
        l_strScheduledNumberOfLVFTExtra = StrIStr(t_intScheduledNumberOfLVFTExtra);
        l_strTotalConsumedTips50 = StrConcat2(Translate("Tip 50 µl : "), l_strTotalConsumedTips50);
        l_strScheduleTotalAmountOfLVFT = StrConcat8(Translate("Tip 50 µl : total amount ( "), l_strScheduleTotalAmountOfLVFT, Translate(" ) = tips per sample ( "), l_strScheduledNumberOfLVFTPerSample, Translate(" ) + "), Translate(" extra tips ( "), l_strScheduledNumberOfLVFTExtra, Translate(" )"));
        l_strScheduleTotalAmountOfSVFT = StrIStr(l_intScheduleTotalAmountOfSVFT);
        l_strScheduledNumberOfSVFTPerSample = StrIStr(t_intScheduledNumberOfSVFTPerSample);
        l_strScheduledNumberOfSVFTExtra = StrIStr(t_intScheduledNumberOfSVFTExtra);
        l_strTotalConsumedTips300 = StrConcat2(Translate("Tip 30 µl : "), l_strTotalConsumedTips300);
        l_strScheduleTotalAmountOfSVFT = StrConcat8(Translate("Tip 300 µl : total amount ( "), l_strScheduleTotalAmountOfSVFT, Translate(" ) = tips per sample ( "), l_strScheduledNumberOfSVFTPerSample, Translate(" ) + "), Translate(" extra tips ( "), l_strScheduledNumberOfSVFTExtra, Translate(" )"));
        l_strScheduleTotalAmountOfHVFT = StrIStr(l_intScheduleTotalAmountOfHVFT);
        l_strScheduledNumberOfHVFTPerSample = StrIStr(t_intScheduledNumberOfHVFTPerSample);
        l_strScheduledNumberOfHVFTExtra = StrIStr(t_intScheduledNumberOfHVFTExtra);
        l_strTotalConsumedTips1000 = StrConcat2(Translate("Tip 1000 µl : "), l_strTotalConsumedTips1000);
        l_strScheduleTotalAmountOfHVFT = StrConcat8(Translate("Tip 1000 µl : total amount ( "), l_strScheduleTotalAmountOfHVFT, Translate(" ) = tips per sample ( "), l_strScheduledNumberOfHVFTPerSample, Translate(" ) + "), Translate(" extra tips ( "), l_strScheduledNumberOfHVFTExtra, Translate(" )"));
        l_strRunTime = StrConcat2(Translate("Run time : "), l_strElapsedTimeOfProccessTimer);
        l_strScheduledNumberOfHSP = StrIStr(t_intScheduledNumberOfHSP);
        l_strScheduledNumberOfHSP = StrConcat2(Translate("Number of HSP : "), l_strScheduledNumberOfHSP);
        l_strScheduledNumberOfMIDI = StrIStr(t_intScheduledNumberOfMIDI);
        l_strScheduledNumberOfMIDI = StrConcat2(Translate("Number of MIDI : "), l_strScheduledNumberOfMIDI);
        l_strScheduledNumberOfHamiltonComfortLid = StrIStr(t_intScheduledNumberOfHamiltonComfortLid);
        l_strScheduledNumberOfHamiltonComfortLid = StrConcat2(Translate("Number of Hamilton Comfort Lid : "), l_strScheduledNumberOfHamiltonComfortLid);
        l_arrListTipAndTimeConsumptionMessage.SetSize(0);
        l_arrListTipAndTimeConsumptionMessage.AddAsLast(l_strNumberOfSamples);
        l_arrListTipAndTimeConsumptionMessage.AddAsLast(Translate("- - - - - - - - - - - - - - - - - - - - - - - -"));
        l_arrListTipAndTimeConsumptionMessage.AddAsLast(l_strScheduleTotalAmountOfLVFT);
        l_arrListTipAndTimeConsumptionMessage.AddAsLast(l_strScheduleTotalAmountOfSVFT);
        l_arrListTipAndTimeConsumptionMessage.AddAsLast(l_strScheduleTotalAmountOfHVFT);
        l_arrListTipAndTimeConsumptionMessage.AddAsLast(l_strScheduledNumberOfHSP);
        l_arrListTipAndTimeConsumptionMessage.AddAsLast(l_strScheduledNumberOfMIDI);
        l_arrListTipAndTimeConsumptionMessage.AddAsLast(l_strScheduledNumberOfHamiltonComfortLid);
        l_arrListTipAndTimeConsumptionMessage.AddAsLast(Translate("- - - - - - - - - - - - - - - - - - - - - - - -"));
        l_arrListTipAndTimeConsumptionMessage.AddAsLast(l_strRunTime);
        VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Scheduled time,  tip, plates and lid consumption : "), Translate("Take care to choose the most tip consuming options for simulation and enter those values into the loading definition within main method."), l_arrListTipAndTimeConsumptionMessage);
      }
      else
      {
        l_strNumberOfSamples = StrConcat2(Translate("Number of samples : "), t_intGetTotalSequenceDispense);
        l_strTotalConsumedTips50 = StrIStr(t_intTotalConsumedTips50);
        l_strTotalConsumedTips50 = StrConcat2(Translate("Tip 50 µl : "), l_strTotalConsumedTips50);
        l_strTotalConsumedTips300 = StrIStr(t_intTotalConsumedTips300);
        l_strTotalConsumedTips300 = StrConcat2(Translate("Tip 300 µl : "), l_strTotalConsumedTips300);
        l_strTotalConsumedTips1000 = StrIStr(t_intTotalConsumedTips1000);
        l_strTotalConsumedTips1000 = StrConcat2(Translate("Tip 1000 µl : "), l_strTotalConsumedTips1000);
        l_strRunTime = StrConcat2(Translate("Run time : "), l_strElapsedTimeOfProccessTimer);
        l_arrListTipAndTimeConsumptionMessage.SetSize(0);
        l_arrListTipAndTimeConsumptionMessage.AddAsLast(l_strNumberOfSamples);
        l_arrListTipAndTimeConsumptionMessage.AddAsLast(Translate("- - - - - - - - - - - - - - - - - - - - - - - -"));
        l_arrListTipAndTimeConsumptionMessage.AddAsLast(l_strTotalConsumedTips50);
        l_arrListTipAndTimeConsumptionMessage.AddAsLast(l_strTotalConsumedTips300);
        l_arrListTipAndTimeConsumptionMessage.AddAsLast(l_strTotalConsumedTips1000);
        l_arrListTipAndTimeConsumptionMessage.AddAsLast(Translate("- - - - - - - - - - - - - - - - - - - - - - - -"));
        l_arrListTipAndTimeConsumptionMessage.AddAsLast(l_strRunTime);
        VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Tip and time consumption : "), Translate(""), l_arrListTipAndTimeConsumptionMessage);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_TipAndTimeConsumption <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_MPH_ReagentsfromPlatetoPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intNumberOfSamples, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom ) void {
    private variable l_intCurrentDispenseMode;
    private variable l_strCurrentDispenseMode;
    private variable l_intCurrentTipType;
    private variable l_strStepReturnValueDispense;
    private variable l_strStepReturnValueAspiration;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strVolume;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    private variable l_intTotalColumns;
    private variable l_intRemainder;
    private variable l_blnActivateLiquidFollowing;
    private sequence l_seqTempAspirationPosition;
    private sequence l_seqTempDispensePosition;
    private variable l_intMixCycleAspiration;
    private variable l_intMixCycleDispense;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_MPH_ReagentsfromPlatetoPlate<<<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strVolume = StrFStr(i_fltVolume);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents using MPH"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      _DATA_PlausibilityCheckVolume(i_fltVolume, l_intCurrentTipType);
      _DATA_ScheduleTips(i_seqDispensePosition, ASWGLOBAL::BOOL::TRUE, l_intCurrentTipType, ASWGLOBAL::BOOL::TRUE);
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        l_intTotalColumns = i_intNumberOfSamples / 8;
        l_intRemainder = i_intNumberOfSamples % 8;
        if (l_intRemainder > 0)
        {
          l_intTotalColumns = l_intTotalColumns + 1;
        }
        if (i_fltVolumeMixDispense == 0)
        {
          l_intMixCycleDispense = 0;
        }
        else
        {
          l_intMixCycleDispense = i_intMixCycles;
        }
        if (i_fltVolumeMixAspiration == 0)
        {
          l_intMixCycleAspiration = 0;
        }
        else
        {
          l_intMixCycleAspiration = i_intMixCycles;
        }
        if (l_intCurrentTipType == 1)
        {
          if (t_intTiptypePreloadedAtSupportBlock == 0)
          {
            PIP_CleanUpTipAdapter(ML_STAR, ASWGLOBAL::BOOL::FALSE);
          }
          else
          {
            if (t_intTiptypePreloadedAtSupportBlock == 23)
            {
              PIP_CleanUpTipAdapter(ML_STAR, ASWGLOBAL::BOOL::TRUE);
            }
          }
          STAR_MPH96_TOOLS::TIP_OFFSET_PickUpTips_Column(ML_STAR, t_seqTips300, t_arrTipAdapters.ElementAt( 2 -1), l_intTotalColumns, t_strTipCounterNameTip300, ASWGLOBAL::BOOL::FALSE);
          t_intTiptypePreloadedAtSupportBlock = 1;
          _DATA_MPH_ProvideSequence96Plate(i_seqAspirationPosition, i_seqDispensePosition, l_seqTempAspirationPosition, l_seqTempDispensePosition);
          if (i_fltAspirateHeightFromBottom == 0)
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
              	l_strStepReturnValueAspiration = arrRetValues[2];
            }
          }
          else
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
              	l_strStepReturnValueAspiration = arrRetValues[2];
            }
          }
          if (i_fltDispenseHeightFromBottom == 0)
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
              	l_strStepReturnValueDispense = arrRetValues[2];
            }
          }
          else
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
              	l_strStepReturnValueDispense = arrRetValues[2];
            }
          }
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
          DATA_TipCounterWrite(ML_STAR);
          _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReportMPH(l_strStepReturnValueAspiration, l_strStepReturnValueDispense, i_seqAspirationPosition, i_seqDispensePosition, ASWGLOBAL::BOOL::FALSE);
        }
        if (l_intCurrentTipType == 23)
        {
          if (t_intTiptypePreloadedAtSupportBlock == 0)
          {
            PIP_CleanUpTipAdapter(ML_STAR, ASWGLOBAL::BOOL::FALSE);
          }
          else
          {
            if (t_intTiptypePreloadedAtSupportBlock == 1)
            {
              PIP_CleanUpTipAdapter(ML_STAR, ASWGLOBAL::BOOL::TRUE);
            }
          }
          STAR_MPH96_TOOLS::TIP_OFFSET_PickUpTips_Column(ML_STAR, t_seqTips50, t_arrTipAdapters.ElementAt( 1 -1), l_intTotalColumns, t_strTipCounterNameTip50, ASWGLOBAL::BOOL::FALSE);
          _DATA_MPH_ProvideSequence96Plate(i_seqAspirationPosition, i_seqDispensePosition, l_seqTempAspirationPosition, l_seqTempDispensePosition);
          t_intTiptypePreloadedAtSupportBlock = 23;
          if (i_fltAspirateHeightFromBottom == 0)
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
              	l_strStepReturnValueAspiration = arrRetValues[2];
            }
          }
          else
          {
            if (i_fltAspirateHeightFromBottom <= 1.8)
            {
              l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
            }
            else
            {
              l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
              	l_strStepReturnValueAspiration = arrRetValues[2];
            }
          }
          if (i_fltDispenseHeightFromBottom == 0)
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
              	l_strStepReturnValueDispense = arrRetValues[2];
            }
          }
          else
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
              	l_strStepReturnValueDispense = arrRetValues[2];
            }
          }
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
          DATA_TipCounterWrite(ML_STAR);
          i_seqAspirationPosition.SetCount(i_intNumberOfSamples);
          i_seqDispensePosition.SetCount(i_intNumberOfSamples);
          _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReportMPH(l_strStepReturnValueAspiration, l_strStepReturnValueDispense, i_seqAspirationPosition, i_seqDispensePosition, ASWGLOBAL::BOOL::FALSE);
        }
        if (l_intCurrentTipType == 5)
        {
          MECC::TraceComment(Translate("WRONG TIP TYPE DETECTED"));
          VectorCustomDialogs::ErrorDialog(Translate("Error Indication - Unsupported Dispense Mode"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Unsupported tip type detected."), Translate(""));
          abort;
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        VectorCustomDialogs::ErrorDialog(Translate("Error Indication - Unsupported Dispense Mode"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Unsupported dispense mode detected."), Translate(""));
        abort;
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_MPH_ReagentsfromPlatetoPlate<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _HHS_Shake( variable i_intHHS, variable i_intSpeed, variable i_intShakingDuration ) void {
    private timer l_hdlTimerShaking;
    private variable l_blnReturnValueOfCurrentSMTTab;
    private variable l_fltActualShakingDurationHHS;
    private variable l_intCheckForEarlyStop;
    private variable l_intErrorCodeHHS;
    private variable l_strDisplayTextToStatusWindow;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  HHS_Shake command during processes smt<<<<<<<<<<"));
    Trace ("***** Now shaking on HHS", i_intHHS, " at ", i_intSpeed, "rpm for ", i_intShakingDuration, "seconds...");
    l_strDisplayTextToStatusWindow = StrConcat8(Translate("Shake on HHS "), i_intHHS, Translate(" at "), i_intSpeed, Translate(" rpm for "), i_intShakingDuration, Translate(" seconds ..."), Translate(""));
    VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      l_intErrorCodeHHS = HSLHamHeaterShaker::StartShaker(i_intHHS, i_intSpeed);
      _HHS_HandleReturnValue(l_intErrorCodeHHS);
      if( 0 == l_hdlTimerShaking.SetTimer(i_intShakingDuration) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      l_intCheckForEarlyStop = l_hdlTimerShaking.WaitTimer(hslTrue, hslTrue);
      if (0 == l_intCheckForEarlyStop)
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if (l_intCheckForEarlyStop == 3)
      {
        MECC::TraceComment(Translate("***** WARNING!  The shaking was stopped prematurely by the operator! *****"));
      }
      l_fltActualShakingDurationHHS = l_hdlTimerShaking.GetElapsedTime();
      Trace ("***** Actual Shaking Duration (seconds):  ", l_fltActualShakingDurationHHS);
      l_intErrorCodeHHS = HSLHamHeaterShaker::StopShaker(i_intHHS);
      _HHS_HandleReturnValue(l_intErrorCodeHHS);
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - HHS SHAKE simulated"));
    }
    l_blnReturnValueOfCurrentSMTTab = ASWGLOBAL::BOOL::TRUE;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  HHS_Shake command during processes smt<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _DATA_CalculateAndDefineBatchProcessCleanUp( variable i_intNumberOfColumnsWithinOneBatch, variable i_blnActivateBatchProcessForScaleUp, sequence & i_seqMagneticStandPosition, sequence & o_arrSeqMagneticStandPositionBatchwiseSorted[], variable & o_intNumberOfCalculatedBatchesToBeProcessed ) void {
    private variable l_intGetEndPositionOfSequence;
    private variable l_intIncompletefColumsToBeProcessed;
    private variable l_intInitialNumberOfColumsToBeProcessed;
    private variable l_intInnerLoopCountingSequencesItems;
    private variable l_intLoopCounterBatch;
    private variable l_intSequenceItemsPerBatch;
    private variable l_strLabwareIDOfCurrentSequnence;
    private variable l_strPositionIDOfCurrentSequence;
    private sequence l_seqBatch1;
    private sequence l_seqBatch10;
    private sequence l_seqBatch11;
    private sequence l_seqBatch12;
    private sequence l_seqBatch2;
    private sequence l_seqBatch3;
    private sequence l_seqBatch4;
    private sequence l_seqBatch5;
    private sequence l_seqBatch6;
    private sequence l_seqBatch7;
    private sequence l_seqBatch8;
    private sequence l_seqBatch9;
    private sequence l_seqIntermediateSequencePerBatch;
    private dialog dialogHandle_13;
    private variable o_intNumberOfIncompleteBatchesToBeProcessed;
    o_arrSeqMagneticStandPositionBatchwiseSorted.SetSize( 0);
    o_intNumberOfCalculatedBatchesToBeProcessed = 0;
    o_arrSeqMagneticStandPositionBatchwiseSorted.SetSize(0);
    if(0){
      TrcTraceSequence(i_seqMagneticStandPosition);
    }
    l_intGetEndPositionOfSequence = i_seqMagneticStandPosition.GetCount();
    l_intInitialNumberOfColumsToBeProcessed = l_intGetEndPositionOfSequence / 8;
    l_intIncompletefColumsToBeProcessed = l_intGetEndPositionOfSequence % 8;
    if (l_intIncompletefColumsToBeProcessed > 0)
    {
      l_intInitialNumberOfColumsToBeProcessed = l_intInitialNumberOfColumsToBeProcessed + 1;
    }
    o_intNumberOfCalculatedBatchesToBeProcessed = l_intInitialNumberOfColumsToBeProcessed / i_intNumberOfColumnsWithinOneBatch;
    o_intNumberOfIncompleteBatchesToBeProcessed = l_intInitialNumberOfColumsToBeProcessed % i_intNumberOfColumnsWithinOneBatch;
    if (o_intNumberOfIncompleteBatchesToBeProcessed > 0)
    {
      o_intNumberOfCalculatedBatchesToBeProcessed = o_intNumberOfCalculatedBatchesToBeProcessed + 1;
    }
    l_intSequenceItemsPerBatch = i_intNumberOfColumnsWithinOneBatch * 8;
    if(0){
      dialogHandle_13.SetOutput(Translate("i_intNumberOfColumnsWithinOneBatch : "), i_intNumberOfColumnsWithinOneBatch, "\n", Translate("intInitialNumberOfColumsToBeProcessed : "), l_intInitialNumberOfColumsToBeProcessed, "\n", Translate("o_intNumberOfCalculatedBatchesToBeProcessed : "), o_intNumberOfCalculatedBatchesToBeProcessed, "\n", Translate("i_blnActivateBatchProcessForScaleUp : "), i_blnActivateBatchProcessForScaleUp, "\n", Translate("intGetEndPositionOfSequence : "), l_intGetEndPositionOfSequence, "\n", Translate("intSequenceItemsPerBatch : "), l_intSequenceItemsPerBatch, "\n");
      dialogHandle_13.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (i_intNumberOfColumnsWithinOneBatch >= l_intInitialNumberOfColumsToBeProcessed)
    {
      o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(i_seqMagneticStandPosition);
    }
    else
    {
      if (i_blnActivateBatchProcessForScaleUp == ASWGLOBAL::BOOL::FALSE)
      {
        o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(i_seqMagneticStandPosition);
      }
      else
      {
        {
          for(l_intLoopCounterBatch = 0; l_intLoopCounterBatch < o_intNumberOfCalculatedBatchesToBeProcessed;)
          {
            l_intLoopCounterBatch = l_intLoopCounterBatch + 1;
            SeqRemoveAll(l_seqIntermediateSequencePerBatch);
            {
              for(l_intInnerLoopCountingSequencesItems = 0; l_intInnerLoopCountingSequencesItems < l_intSequenceItemsPerBatch;)
              {
                l_intInnerLoopCountingSequencesItems = l_intInnerLoopCountingSequencesItems + 1;
                l_strLabwareIDOfCurrentSequnence = SeqGetLabwareId(i_seqMagneticStandPosition);
                l_strPositionIDOfCurrentSequence = SeqGetPositionId(i_seqMagneticStandPosition);
                if (l_strLabwareIDOfCurrentSequnence != "")
                {
                  SeqAdd(l_seqIntermediateSequencePerBatch, l_strLabwareIDOfCurrentSequnence, l_strPositionIDOfCurrentSequence);
                }
                SeqIncrement(i_seqMagneticStandPosition, 1);
              }
            }
            l_seqIntermediateSequencePerBatch.SetCurrentPosition(1);
            if (l_intLoopCounterBatch == 1)
            {
              SeqCopySequence(l_seqBatch1, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch1);
            }
            if (l_intLoopCounterBatch == 2)
            {
              SeqCopySequence(l_seqBatch2, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch2);
            }
            if (l_intLoopCounterBatch == 3)
            {
              SeqCopySequence(l_seqBatch3, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch3);
            }
            if (l_intLoopCounterBatch == 4)
            {
              SeqCopySequence(l_seqBatch4, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch4);
            }
            if (l_intLoopCounterBatch == 5)
            {
              SeqCopySequence(l_seqBatch5, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch5);
            }
            if (l_intLoopCounterBatch == 6)
            {
              SeqCopySequence(l_seqBatch6, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch6);
            }
            if (l_intLoopCounterBatch == 7)
            {
              SeqCopySequence(l_seqBatch7, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch7);
            }
            if (l_intLoopCounterBatch == 8)
            {
              SeqCopySequence(l_seqBatch8, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch8);
            }
            if (l_intLoopCounterBatch == 9)
            {
              SeqCopySequence(l_seqBatch9, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch9);
            }
            if (l_intLoopCounterBatch == 10)
            {
              SeqCopySequence(l_seqBatch10, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch10);
            }
            if (l_intLoopCounterBatch == 11)
            {
              SeqCopySequence(l_seqBatch11, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch11);
            }
            if (l_intLoopCounterBatch == 12)
            {
              SeqCopySequence(l_seqBatch12, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch12);
            }
          }
        }
        i_seqMagneticStandPosition.SetCurrentPosition(1);
      }
    }
  }

  function Process_CleanUp( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, sequence & i_seqPositionHHS, sequence & i_seqAspirationPositionEthanol, sequence & i_seqMagneticStandPosition, sequence & i_seqLiquidWaste, sequence & i_seqAspirationPositionResuspensionBuffer, variable i_fltVolumeEthanol, variable i_fltVolumeBeads, variable i_fltVolumeResuspensionBuffer, variable i_fltVolumeSupernatantToWaste, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMixing, variable i_strLiquidClassEthanol, variable i_strLiquidClassResuspensionBuffer, variable i_strLiquidClassSupernatantToWaste, variable i_strLiquidClassEthanolToWaste, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerDurationResuspendCleanedLibrary, variable i_intNumberOfColumnsWithinOneBatch, variable i_intShakerDevice, variable i_blnActivateBatchProcessForScaleUp, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver ) void {
    private timer l_hdlOverdryingTimerAirDryingEthanol;
    private timer l_hdlTimerIncubationAfterResuspendation;
    private timer l_hdlTimerIncubationAvoidingBeadCarryOverAtMagneticStand;
    private sequence l_arrSequenceBatchProcessingCleanUp[];
    private sequence l_seqCurrentIntermediateBatch;
    private variable l_intBatchCounter;
    private variable l_intNumberOfCalculatedBatchesToBeProcessed;
    private variable l_strBatchInformation;
    private variable l_strReadCurrentBarcode;
    private timer l_hdlTimerIncubationAtMagent;
    private timer l_hldTimerIncubationAfterShakingAtHeaterShaker;
    private variable l_strLabwareIDAspiration;
    private variable l_strTypeOfLabware;
    private variable l_blnActivateIncrementSequence;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Process_CleanUp <<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    DATA_UpdateInformationIntoReportFile(Translate("Process clean up"), ASWGLOBAL::BOOL::TRUE);
    _DATA_CalculateAndDefineBatchProcessCleanUp(i_intNumberOfColumnsWithinOneBatch, i_blnActivateBatchProcessForScaleUp, i_seqMagneticStandPosition, l_arrSequenceBatchProcessingCleanUp, l_intNumberOfCalculatedBatchesToBeProcessed);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      l_strLabwareIDAspiration = SeqGetLabwareId(i_seqAspirationPositionBeads);
      _DATA_InterpreteLabwareID(l_strLabwareIDAspiration, l_strTypeOfLabware);
      if (l_strTypeOfLabware == "tube")
      {
        l_blnActivateIncrementSequence = ASWGLOBAL::BOOL::TRUE;
      }
      if (l_strTypeOfLabware == "trough")
      {
        l_blnActivateIncrementSequence = ASWGLOBAL::BOOL::FALSE;
      }
      PIP_MixOnly(ML_STAR, i_seqMixPositionBeads, 0, i_strLiquidClassBeadsMixing, 10, 0);
      PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionBeads, i_seqPositionHHS, i_fltVolumeBeads, i_strLiquidClassBeads, 0, 0, 0, 0, 1, ASWGLOBAL::BOOL::TRUE, l_blnActivateIncrementSequence, ASWGLOBAL::BOOL::FALSE);
    }
    _HHS_Shake(i_intShakerDevice, i_intShakerRPMBeadSampleMixing, i_intShakerDurationBeadSampleMixing);
    DATA_IncubationTimer(l_hldTimerIncubationAfterShakingAtHeaterShaker, i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, 1);
    Trp_MIDI(ML_STAR, i_seqPositionHHS, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    DATA_IncubationTimer(l_hdlTimerIncubationAtMagent, i_intTimeForSeparationAtMagneticStand, 1);
    SeqRemoveAll(l_seqCurrentIntermediateBatch);
    {
      for(l_intBatchCounter = 0; l_intBatchCounter < l_intNumberOfCalculatedBatchesToBeProcessed;)
      {
        l_intBatchCounter = l_intBatchCounter + 1;
        l_seqCurrentIntermediateBatch=l_arrSequenceBatchProcessingCleanUp.GetAt(l_intBatchCounter-1);
        AlignSequences(hslTrue, l_seqCurrentIntermediateBatch, 1, i_seqMagneticStandPosition, 1);
        l_seqCurrentIntermediateBatch.SetCurrentPosition(1);
        if(0){
          TrcTraceSequence(l_seqCurrentIntermediateBatch);
        }
        l_strBatchInformation = StrConcat4(Translate("...batch "), l_intBatchCounter, Translate(" of "), l_intNumberOfCalculatedBatchesToBeProcessed);
        VectorCustomDialogs::AppendStatusText(l_strBatchInformation);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, l_seqCurrentIntermediateBatch, i_seqLiquidWaste, i_fltVolumeSupernatantToWaste, i_strLiquidClassSupernatantToWaste);
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          _PIP_MultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPositionEthanol, l_seqCurrentIntermediateBatch, i_fltVolumeEthanol, i_strLiquidClassEthanol, 6);
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, l_seqCurrentIntermediateBatch, i_seqLiquidWaste, 210, i_strLiquidClassEthanolToWaste);
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          _PIP_MultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPositionEthanol, l_seqCurrentIntermediateBatch, i_fltVolumeEthanol, i_strLiquidClassEthanol, 6);
        }
        DATA_IncubationTimer(l_hdlOverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, 2);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, l_seqCurrentIntermediateBatch, i_seqLiquidWaste, 210, i_strLiquidClassEthanolToWaste);
        }
        VectorCustomDialogs::AppendStatusText(Translate("Incubation bead air drying at magnetic stand"));
        l_seqCurrentIntermediateBatch.SetCurrentPosition(1);
        DATA_IncubationTimer(l_hdlOverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, 3);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionResuspensionBuffer, l_seqCurrentIntermediateBatch, i_fltVolumeResuspensionBuffer, i_strLiquidClassResuspensionBuffer, 0, 0, 0, 0, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    Trp_MIDI(ML_STAR, i_seqMagneticStandPosition, i_seqPositionHHS, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    _HHS_Shake(i_intShakerDevice, i_intShakerRPMResuspendCleanedLibrary, i_intShakerDurationResuspendCleanedLibrary);
    _HHS_Shake(i_intShakerDevice, 800, 10);
    DATA_IncubationTimer(l_hdlTimerIncubationAfterResuspendation, i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, 1);
    Trp_MIDI(ML_STAR, i_seqPositionHHS, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    DATA_IncubationTimer(l_hdlTimerIncubationAvoidingBeadCarryOverAtMagneticStand, i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver, 1);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Process_CleanUp <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_UpdateInformationIntoReportFile( variable i_strInformationToUpdateReportList, variable i_blnUpdateInformationToStatusWindow ) void {
    private variable l_strEmptyString;
    private file l_hdlNGSStarReportFile2;
    VectorCustomDialogs::Initialize();
    l_strEmptyString = Translate("");
    if(0){
      Trace ("Update Current information                :  ", i_strInformationToUpdateReportList);
    }
    onerror goto errLabel_14 ;
    err.Clear();
    l_hdlNGSStarReportFile2.AddField("Date", i_strInformationToUpdateReportList, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Time", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Source", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Source", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transfer Volume", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Target", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Target", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Barcode", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transport information", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Aspiration information", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Dispense information", l_strEmptyString, hslString, 255);
    if( 0 == l_hdlNGSStarReportFile2.Open(t_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
    }
    errLabel_14 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      _DATA_IntegratedAbortHandler(Translate("NGSStarProcesses.smt "), Translate("DATA_UpdateInformationIntoReportFile. This smt writes any information (string) into a customized report file .xls format within a new line inbetween the stepreturn values."));
    }   /* end if from skip handler if no error */
    if( 0 == l_hdlNGSStarReportFile2.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != l_hdlNGSStarReportFile2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlNGSStarReportFile2.RemoveFields();
    if (i_blnUpdateInformationToStatusWindow == ASWGLOBAL::BOOL::TRUE)
    {
      VectorCustomDialogs::AppendStatusText(i_strInformationToUpdateReportList);
    }
  }

  function DATA_CreateNewSequencesOrTransportSequences( sequence i_sequenceTemplate, variable & i_arrPositionIDs[], sequence & o_seqCreated, variable i_intSequenceType ) void {
    private variable l_arr_strLabwareIDsOfTemplateSequence[];
    private variable l_intElementCounter;
    private variable l_intSizeOfArrayContainingLabwareIDs;
    private variable l_intSizeOfArrayContainingPositionIDs;
    private variable l_strLabwareIDOfTemplateSequence;
    { sequence __temp; o_seqCreated = __temp; }
    SeqRemoveAll(o_seqCreated);
    if (i_intSequenceType == 1)
    {
      l_strLabwareIDOfTemplateSequence = SeqGetLabwareId(i_sequenceTemplate);
      l_intSizeOfArrayContainingPositionIDs=i_arrPositionIDs.GetSize();
      {
        for(l_intElementCounter = 0; l_intElementCounter < l_intSizeOfArrayContainingPositionIDs;)
        {
          l_intElementCounter = l_intElementCounter + 1;
          SeqAdd(o_seqCreated, l_strLabwareIDOfTemplateSequence, i_arrPositionIDs.ElementAt( l_intElementCounter -1));
        }
      }
    }
    if (i_intSequenceType == 2)
    {
      SeqGetLabwareIds(i_sequenceTemplate, l_arr_strLabwareIDsOfTemplateSequence);
      l_intSizeOfArrayContainingLabwareIDs=l_arr_strLabwareIDsOfTemplateSequence.GetSize();
      {
        for(l_intElementCounter = 0; l_intElementCounter < l_intSizeOfArrayContainingLabwareIDs;)
        {
          l_intElementCounter = l_intElementCounter + 1;
          SeqAdd(o_seqCreated, l_arr_strLabwareIDsOfTemplateSequence.ElementAt( l_intElementCounter -1), Translate("A1"));
        }
      }
    }
    o_seqCreated.SetCurrentPosition(1);
  }

  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void {
    private variable l_strAbortMessage;
    private variable l_strFunctionName;
    private variable l_arrAbortHandlerMessage[];
    MECC::TraceComment(Translate("\n>>>>>>>>>> Submethod: _DATA_IntegratedAbortHandler <<<<<<<<<<"));
    l_strFunctionName = StrConcat2(Translate("Affected library : "), i_strFunctionName);
    VectorCustomDialogs::Initialize();
    l_strAbortMessage = StrConcat2(Translate("Abort message : "), i_strAbortMessage);
    l_strFunctionName = StrConcat2(Translate("Affected library : "), i_strFunctionName);
    l_arrAbortHandlerMessage.SetSize(0);
    l_arrAbortHandlerMessage.AddAsLast(l_strFunctionName);
    l_arrAbortHandlerMessage.AddAsLast(l_strAbortMessage);
    VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Internal abort handler message :  "), Translate("Error occurred - abort routine started - Press OK to abort the run."), l_arrAbortHandlerMessage);
    abort;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: _DATA_IntegratedAbortHandler <<<<<<<<<<\n"));
  }

  private function _HHS_HandleReturnValue( variable i_intErrorCode ) void {
    private variable l_strDecodedErrorText;
    private variable l_strErrorMessage;
    if (i_intErrorCode != 0)
    {
      if (i_intErrorCode == 1)
      {
        l_strDecodedErrorText = Translate("Fatal error.");
      }
      if (i_intErrorCode == 2)
      {
        l_strDecodedErrorText = Translate("Used node is not initialized.");
      }
      if (i_intErrorCode == 3)
      {
        l_strDecodedErrorText = Translate("Device not connected.");
      }
      if (i_intErrorCode == 4)
      {
        l_strDecodedErrorText = Translate("CAN error.");
      }
      if (i_intErrorCode == 5)
      {
        l_strDecodedErrorText = Translate("No communication to EEPROM.");
      }
      if (i_intErrorCode == 6)
      {
        l_strDecodedErrorText = Translate("Unknown command.");
      }
      if (i_intErrorCode == 7)
      {
        l_strDecodedErrorText = Translate("Unknown parameter.");
      }
      if (i_intErrorCode == 8)
      {
        l_strDecodedErrorText = Translate("Parameter out of range.");
      }
      if (i_intErrorCode == 9)
      {
        l_strDecodedErrorText = Translate("Voltage outside permitted range.");
      }
      if (i_intErrorCode == 10)
      {
        l_strDecodedErrorText = Translate("Stop received.");
      }
      if (i_intErrorCode == 11)
      {
        l_strDecodedErrorText = Translate("Wrong system address.");
      }
      if (i_intErrorCode == 12)
      {
        l_strDecodedErrorText = Translate("Parallel commands are nor allowed.");
      }
      if (i_intErrorCode == 13)
      {
        l_strDecodedErrorText = Translate("Shaker initialization failed.");
      }
      if (i_intErrorCode == 14)
      {
        l_strDecodedErrorText = Translate("Shaker not initialized.");
      }
      if (i_intErrorCode == 15)
      {
        l_strDecodedErrorText = Translate("Shaker step loss.");
      }
      if (i_intErrorCode == 16)
      {
        l_strDecodedErrorText = Translate("Shaker start mode.");
      }
      if (i_intErrorCode == 17)
      {
        l_strDecodedErrorText = Translate("Plate lock initialization failed.");
      }
      if (i_intErrorCode == 18)
      {
        l_strDecodedErrorText = Translate("Plate lock not initialized.");
      }
      if (i_intErrorCode == 19)
      {
        l_strDecodedErrorText = Translate("Plate lock step loss.");
      }
      if (i_intErrorCode == 20)
      {
        l_strDecodedErrorText = Translate("Temperature controlling not started.");
      }
      if (i_intErrorCode == 21)
      {
        l_strDecodedErrorText = Translate("Time out of temperature supervision.");
      }
      if (i_intErrorCode == 22)
      {
        l_strDecodedErrorText = Translate("Temperature out of supervision range.");
      }
      if (i_intErrorCode == 23)
      {
        l_strDecodedErrorText = Translate("Temperature out of security range.");
      }
      if (i_intErrorCode == 24)
      {
        l_strDecodedErrorText = Translate("Temperature sensor problem.");
      }
      if (i_intErrorCode == 25)
      {
        l_strDecodedErrorText = Translate("Time out during send of a command.");
      }
      if (i_intErrorCode == 26)
      {
        l_strDecodedErrorText = Translate("Unknown firmware error.");
      }
      if (i_intErrorCode == 27)
      {
        l_strDecodedErrorText = Translate("Input parameter must be an string.");
      }
      if (i_intErrorCode == 28)
      {
        l_strDecodedErrorText = Translate("Input parameter must be an integer.");
      }
      if (i_intErrorCode == 29)
      {
        l_strDecodedErrorText = Translate("Input parameter must be an double.");
      }
      if (i_intErrorCode == 30)
      {
        l_strDecodedErrorText = Translate("Needed node not installed or switched off.");
      }
      if (i_intErrorCode == 31)
      {
        l_strDecodedErrorText = Translate("Unknown firmware result string format.");
      }
      if (i_intErrorCode == 32)
      {
        l_strDecodedErrorText = Translate("Wrong length of parameter.");
      }
      Trace ("HHS ERROR CODE:  ", i_intErrorCode);
      Trace ("HHS ERROR DECODED MESSSAGE:  ", l_strDecodedErrorText);
      l_strErrorMessage = StrConcat8(Translate("CPAC_Report Error handler has written more detailed information into the logfile."), Translate("HHS ERROR CODE:  "), i_intErrorCode, Translate("HHS ERROR DECODED MESSSAGE:  "), l_strDecodedErrorText, Translate(""), Translate(""), Translate(""));
      _DATA_IntegratedAbortHandler(Translate("NGSStarProcesses.smt "), l_strErrorMessage);
    }
  }

  private function _DATA_CheckSequenceParameter( sequence & io_seqAspirationPosition, sequence & io_seqDispensePosition ) void {
    private variable l_blnPromptDialog;
    private variable l_blnResetAspirationSequence;
    private variable l_blnResetDispenseSequence;
    private variable l_intCurrentPositionAspiration;
    private variable l_intCurrentPositionDispense;
    private variable l_intGetTotalAspirationSequence;
    private variable l_intGetTotalDispenseSequence;
    private variable l_retValueDialog;
    private variable l_strCurrentLabwareIDAspirationSequence;
    private variable l_strCurrentLabwareIDDispenseSequence;
    private variable l_strGetTotalAspirationSequence;
    private variable l_strCurrentPositionDispense;
    private variable l_strCheckAspirationSequenceMessage;
    private variable l_blnPromptDialogResetDispenseSequence;
    private variable l_blnPromptDialogResetAspirationSequence;
    private variable l_strCheckDispenseSequenceMessage;
    private variable l_strGetTotalDispenseSequence;
    private variable l_strCurrentPositionAspiration;
    private variable l_arrCheckSequenceMessage[];
    VectorCustomDialogs::Initialize();
    l_blnPromptDialog = ASWGLOBAL::BOOL::FALSE;
    l_blnPromptDialogResetAspirationSequence = ASWGLOBAL::BOOL::FALSE;
    l_blnPromptDialogResetDispenseSequence = ASWGLOBAL::BOOL::FALSE;
    l_blnResetAspirationSequence = ASWGLOBAL::BOOL::FALSE;
    l_blnResetDispenseSequence = ASWGLOBAL::BOOL::FALSE;
    l_intCurrentPositionAspiration = io_seqAspirationPosition.GetCurrentPosition();
    if (l_intCurrentPositionAspiration == 0)
    {
      l_blnPromptDialog = ASWGLOBAL::BOOL::TRUE;
      l_blnPromptDialogResetAspirationSequence = ASWGLOBAL::BOOL::TRUE;
    }
    l_strCurrentLabwareIDAspirationSequence = SeqGetLabwareId(io_seqAspirationPosition);
    l_intGetTotalAspirationSequence = SeqGetTotal(io_seqAspirationPosition);
    l_intCurrentPositionDispense = io_seqDispensePosition.GetCurrentPosition();
    if (l_intCurrentPositionDispense == 0)
    {
      l_blnPromptDialog = ASWGLOBAL::BOOL::TRUE;
      l_blnPromptDialogResetDispenseSequence = ASWGLOBAL::BOOL::TRUE;
    }
    l_strCurrentLabwareIDDispenseSequence = SeqGetLabwareId(io_seqDispensePosition);
    l_intGetTotalDispenseSequence = SeqGetTotal(io_seqDispensePosition);
    if (l_blnPromptDialog == ASWGLOBAL::BOOL::TRUE)
    {
      l_strCurrentPositionAspiration = StrIStr(l_intCurrentPositionAspiration);
      l_strCurrentPositionDispense = StrIStr(l_intCurrentPositionDispense);
      l_strGetTotalAspirationSequence = StrIStr(l_intGetTotalAspirationSequence);
      l_strGetTotalDispenseSequence = StrIStr(l_intGetTotalDispenseSequence);
      l_strCheckAspirationSequenceMessage = StrConcat8(Translate("Sequence Labware ID : "), l_strCurrentLabwareIDAspirationSequence, Translate("     Current position : "), l_strCurrentPositionAspiration, Translate("     Total positions : "), l_strGetTotalAspirationSequence, Translate(""), Translate(""));
      l_strCheckDispenseSequenceMessage = StrConcat8(Translate("Sequence Labware ID : "), l_strCurrentLabwareIDAspirationSequence, Translate("     Current position : "), l_strCurrentPositionDispense, Translate("     Total positions : "), l_strGetTotalDispenseSequence, Translate(""), Translate(""));
      l_arrCheckSequenceMessage.SetSize(0);
      l_arrCheckSequenceMessage.AddAsLast(Translate("Aspiration sequence"));
      l_arrCheckSequenceMessage.AddAsLast(Translate("- - - - - - - - - - - - - - - - "));
      l_arrCheckSequenceMessage.AddAsLast(l_strCheckAspirationSequenceMessage);
      l_arrCheckSequenceMessage.AddAsLast(Translate("- - - - - - - - - - - - - - - - "));
      l_arrCheckSequenceMessage.AddAsLast(Translate("Dispense sequence"));
      l_arrCheckSequenceMessage.AddAsLast(Translate("- - - - - - - - - - - - - - - - "));
      l_arrCheckSequenceMessage.AddAsLast(l_strCheckDispenseSequenceMessage);
      l_retValueDialog = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Plausibility check : Sequence handling - check input parameter "), Translate("Hint : Use Data_CreateNewSequencesOrTransportSequences command to define sequneces within the main method. If  the current position of the sequence remains 0 - the main method will continue without current pipetting step."), l_arrCheckSequenceMessage);
      if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
      {
        _DATA_IntegratedAbortHandler(Translate("NGSStarProcesses.smt "), Translate("_DATA_CheckSequenceParameter - Abort requested during pipetting command. Check sequence parameter of current pipetting step."));
      }
      if (l_blnPromptDialogResetAspirationSequence == ASWGLOBAL::BOOL::TRUE)
      {
        l_blnResetAspirationSequence = VectorCustomDialogs::MessageDialog(Translate("Recovery - reset aspiration sequence during runtime."), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Do you want to set the current position of aspiration sequence to 1 in order to be able to continute testing?"));
        if (l_blnResetAspirationSequence == ASWGLOBAL::DIALOG::OK)
        {
          io_seqAspirationPosition.SetCurrentPosition(1);
        }
      }
      if (l_blnPromptDialogResetDispenseSequence == ASWGLOBAL::BOOL::TRUE)
      {
        l_blnResetDispenseSequence = VectorCustomDialogs::MessageDialog(Translate("Recovery - reset dispense sequence during runtime."), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Do you want to set the current position of dispense sequence to 1 in order to be able to continute testing?"));
        if (l_blnResetDispenseSequence == ASWGLOBAL::BOOL::TRUE)
        {
          io_seqDispensePosition.SetCurrentPosition(1);
        }
      }
    }
  }

  function DATA_SendEmail( variable i_strSubject, variable i_strMessage ) void {
    private variable l_strPathOfLogFile;
    private variable l_strSendEmailRecipientAdress;
    private variable l_strSendEmailBody;
    private variable l_strPathOfMailAlert;
    private variable l_strSendEmailSubject;
    private variable l_intReturnValue;
    private variable l_strSendEmailArgumentsForShellCommand;
    private variable l_strCommand;
    private variable l_strSendEmailTimeStamp;
    private variable l_strInformationToBeUpdated;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_SendEmail<<<<<<<<<<"));
    if (t_blnClinicalNGSStarlet == ASWGLOBAL::BOOL::TRUE)
    {
      l_strPathOfMailAlert = Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\MailAlert\\");
    }
    else
    {
      l_strPathOfMailAlert = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\MailAlert\\");
    }
    l_strPathOfLogFile = FilGetLogFilesPath();
    l_strInformationToBeUpdated = StrConcat8(Translate("Send Email performed. Recipient : "), t_strRecipientEmailAdress, Translate(". Message : "), i_strMessage, Translate(""), Translate("."), Translate(""), Translate(""));
    if (t_blnDeactivateEmailFunctions == ASWGLOBAL::BOOL::TRUE)
    {
      DATA_UpdateInformationIntoReportFile(Translate("Send email funciton deactivated. To enable functionality define email adress."), ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
      l_strSendEmailBody = StrConcat4(Translate(" -b "), Translate("\""), i_strMessage, Translate("\""));
      l_strSendEmailSubject = StrConcat4(Translate(" -s "), Translate("\""), i_strSubject, Translate("\""));
      l_strSendEmailRecipientAdress = StrConcat4(Translate(" -r "), Translate("\""), t_strRecipientEmailAdress, Translate("\""));
      l_strSendEmailTimeStamp = StrConcat2(Translate(" -d "), Translate(""));
      l_strSendEmailArgumentsForShellCommand = StrConcat4(l_strSendEmailRecipientAdress, l_strSendEmailSubject, l_strSendEmailBody, l_strSendEmailTimeStamp);
      Trace ("l_strSendEmailArgumentsForShellCommand :   ",l_strSendEmailArgumentsForShellCommand);
      l_strCommand = StrConcat12(Translate(""), Translate(""), Translate(""), Translate("\""), l_strPathOfMailAlert, Translate("MailAlert.exe"), Translate("\""), l_strSendEmailArgumentsForShellCommand, Translate(""), Translate(""), Translate(""), Translate(""));
      TrcTrace(Translate("    --------     l_strCommand: "), l_strCommand);
      {
        event localDummyEvent1;
        if( 0 == Shell(l_strCommand, hslHide, hslSynchronous, localDummyEvent1, l_intReturnValue) )
        {
              MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      _DATA_SendEmail_HandleReturnValue(l_intReturnValue);
    }
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Complete DATA_SendEmail<<<<<<<<<<"));
  }

  private function _DATA_SendEmail_HandleReturnValue( variable i_intErrorCode ) void {
    private variable l_strDecodedErrorText;
    private variable l_strErrorMessage;
    if (t_blnDeactivateEmailFunctions == ASWGLOBAL::BOOL::FALSE)
    {
      if (i_intErrorCode != 0)
      {
        if(0){
          if (i_intErrorCode == 1)
          {
            l_strDecodedErrorText = Translate("Configuration INI file not found ");
          }
          if (i_intErrorCode == 2)
          {
            l_strDecodedErrorText = Translate("Incorrect e-mail To: address");
          }
          if (i_intErrorCode == 3)
          {
            l_strDecodedErrorText = Translate("Incorrect e-mail From: address ");
          }
          if (i_intErrorCode == 4)
          {
            l_strDecodedErrorText = Translate("SMTP Server address is empty ");
          }
          if (i_intErrorCode == 5)
          {
            l_strDecodedErrorText = Translate("SMTP Port number is empty");
          }
          if (i_intErrorCode == 6)
          {
            l_strDecodedErrorText = Translate("E-mail Username is empty ");
          }
          if (i_intErrorCode == 7)
          {
            l_strDecodedErrorText = Translate("Mail Importance value is not supported ");
          }
          if (i_intErrorCode == 8)
          {
            l_strDecodedErrorText = Translate("Not supported charset ");
          }
          if (i_intErrorCode == 9)
          {
            l_strDecodedErrorText = Translate("Attachment file has not been found ");
          }
          if (i_intErrorCode == 10)
          {
            l_strDecodedErrorText = Translate("Your message can not be sent");
          }
          if (i_intErrorCode == 11)
          {
            l_strDecodedErrorText = Translate("SMTP server Password is empty ");
          }
          if (i_intErrorCode == 12)
          {
            l_strDecodedErrorText = Translate("File libeay32.dll has not been found ");
          }
          if (i_intErrorCode == 13)
          {
            l_strDecodedErrorText = Translate("Incorrect e-mail CC: address");
          }
          if (i_intErrorCode == 14)
          {
            l_strDecodedErrorText = Translate("Incorrect e-mail BCC: address ");
          }
          if (i_intErrorCode == 15)
          {
            l_strDecodedErrorText = Translate("Incorrect e-mail ReplyTo: address ");
          }
          if (i_intErrorCode == 16)
          {
            l_strDecodedErrorText = Translate("Syntax error");
          }
        }
        if (i_intErrorCode == 1)
        {
          l_strDecodedErrorText = Translate("Configuration file not found ");
        }
        if (i_intErrorCode == 2)
        {
          l_strDecodedErrorText = Translate("incorrect e-mail To: address");
        }
        if (i_intErrorCode == 3)
        {
          l_strDecodedErrorText = Translate("incorrect e-mail From: address ");
        }
        if (i_intErrorCode == 4)
        {
          l_strDecodedErrorText = Translate("incorrect e-mail CC: address");
        }
        if (i_intErrorCode == 5)
        {
          l_strDecodedErrorText = Translate("Incorrect e-mail BCC: address");
        }
        if (i_intErrorCode == 6)
        {
          l_strDecodedErrorText = Translate("Incorrect e-mail ReplyTo: address ");
        }
        if (i_intErrorCode == 7)
        {
          l_strDecodedErrorText = Translate("SMTP Server address is empty");
        }
        if (i_intErrorCode == 8)
        {
          l_strDecodedErrorText = Translate("SMTP Server Port number is empty");
        }
        if (i_intErrorCode == 9)
        {
          l_strDecodedErrorText = Translate("SMTP Server Port number is incorrect");
        }
        if (i_intErrorCode == 10)
        {
          l_strDecodedErrorText = Translate("E-mail Username is empty");
        }
        if (i_intErrorCode == 11)
        {
          l_strDecodedErrorText = Translate("AlternativeSpaceEncoding is empty");
        }
        if (i_intErrorCode == 12)
        {
          l_strDecodedErrorText = Translate("SMTP Server Password is empty");
        }
        if (i_intErrorCode == 13)
        {
          l_strDecodedErrorText = Translate("E-mail importance ... is not supported according to RFC4021");
        }
        if (i_intErrorCode == 14)
        {
          l_strDecodedErrorText = Translate("Charset ... is not supported");
        }
        if (i_intErrorCode == 15)
        {
          l_strDecodedErrorText = Translate("Attachment file has not been found");
        }
        if (i_intErrorCode == 16)
        {
          l_strDecodedErrorText = Translate("file libeay32.dll has not been found");
        }
        if (i_intErrorCode == 17)
        {
          l_strDecodedErrorText = Translate("File ssleay32.dll has not been found");
        }
        if (i_intErrorCode == 18)
        {
          l_strDecodedErrorText = Translate("Check configuration file permissions: writing error");
        }
        if (i_intErrorCode == 19)
        {
          l_strDecodedErrorText = Translate("General configuration file error");
        }
        if (i_intErrorCode == 20)
        {
          l_strDecodedErrorText = Translate("Can not send your message");
        }
        if (i_intErrorCode == 100)
        {
          l_strDecodedErrorText = Translate("syntax error");
        }
        Trace ("SEND EMAIL ERROR CODE:  ", i_intErrorCode);
        Trace ("SEND EMAIL ERROR DECODED MESSSAGE:  ", l_strDecodedErrorText);
        l_strErrorMessage = StrConcat8(Translate("SEND EMAIL Report Error handler has written more detailed information into the logfile."), Translate(" SEND EMAIL ERROR CODE:  "), i_intErrorCode, Translate(" SEND EMAIL ERROR DECODED MESSSAGE:  "), l_strDecodedErrorText, Translate(""), Translate(""), Translate(""));
      }
      else
      {
        l_strErrorMessage = Translate("DATA_SendEmail : No errors, your message has been sent successfully");
      }
      DATA_UpdateInformationIntoReportFile(l_strErrorMessage, ASWGLOBAL::BOOL::TRUE);
    }
  }

  function Trp_HamiltonComfortLid( device & ML_STAR, sequence & i_seqHamiltonComfortLidSourcePosition, sequence & i_seqHamiltonComfortLidDestinationPosition, variable i_blnParkTransportToolAfterMove, variable i_blnDestinationPositionReachableWithCOREGripper ) void {
    private variable l_intOpeningWidthiSWAP;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strStepReturnValueCOREGetPlate;
    private variable l_strStepReturnValueCOREPlacePlate;
    private variable o_strReadCurrentBarcode;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Trp_HamiltonComfortLid <<<<<<<<<"));
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqHamiltonComfortLidSourcePosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqHamiltonComfortLidDestinationPosition);
    _DATA_ScheduleConsumables(Translate("LID"), l_strLabwareIDOfTargetSequence);
    if (i_blnDestinationPositionReachableWithCOREGripper == ASWGLOBAL::BOOL::TRUE)
    {
      if(0){
        l_strInformationToBeUpdated = StrConcat8(Translate("Transport Hamilton Comfort Lid using CORE Gripper"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Tool used : "), Translate("CORE Gripper"), Translate("."));
        l_strInformationToBeUpdated = Translate("");
        DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
      }
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        	l_strStepReturnValueCOREGetPlate = arrRetValues[2];
      }
      if (i_blnParkTransportToolAfterMove == 1)
      {
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          	l_strStepReturnValueCOREPlacePlate = arrRetValues[2];
        }
      }
      else
      {
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          	l_strStepReturnValueCOREPlacePlate = arrRetValues[2];
        }
      }
    }
    else
    {
      if(0){
        l_strInformationToBeUpdated = StrConcat8(Translate("Transport Hamilton Comfort Lid using iSWAP"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Tool used : "), Translate("iSWAP"), Translate("."));
        l_strInformationToBeUpdated = Translate("");
        DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
      }
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        	l_strStepReturnValueCOREGetPlate = arrRetValues[2];
      }
      ML_STAR._862562D1_B5BB_48ce_B5E4_9E37F8ABB61E("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"); // MovePlate
      if (l_strLabwareIDOfTargetSequence == "Ham_ComfortLid_Waste")
      {
        l_intOpeningWidthiSWAP = 95;
      }
      else
      {
        l_intOpeningWidthiSWAP = 89;
      }
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._41000BBD_D633_401e_A479_D529EA21B22D("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"); // OpenGripper
        	l_strStepReturnValueCOREPlacePlate = arrRetValues[2];
      }
      if (i_blnParkTransportToolAfterMove == 1)
      {
        ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
      else
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    o_strReadCurrentBarcode = Translate("");
    if(0){
      _DATA_AnalyzeStepReturnValueOfTransportStepAndWriteToNGSStarReport(l_strStepReturnValueCOREGetPlate, l_strStepReturnValueCOREPlacePlate, 1, o_strReadCurrentBarcode);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Trp_HamiltonComfortLid <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_CheckPlatesInStacks_TeachingNeedles( device & ML_STAR, sequence & io_seqStack1, sequence & io_seqStack2, sequence & io_seqStack3, sequence & io_seqStack4, variable i_intStack1ExpectedNumberOfPlates, variable i_intStack2ExpectedNumberOfPlates, variable i_intStack3ExpectedNumberOfPlates, variable i_intStack4ExpectedNumberOfPlates, variable i_fltStack1OffsetOfContainerRim, variable i_fltStack2OffsetOfContainerRim, variable i_fltStack3OffsetOfContainerRim, variable i_fltStack4OffsetOfContainerRim, variable & o_intResultCheckOfFalseLoading, variable & o_strMessageResult ) void {
    private variable flt_ContainerHeight;
    private variable int_CurrentPosition;
    private variable int_MaxPlates;
    private variable str_LabwareID;
    private variable flt_AcceptableZRange_mm;
    private variable flt_X;
    private variable flt_Z_ConversionFactor;
    private variable flt_Y;
    private variable str_ChannelPattern;
    private variable flt_Z;
    private variable int_ArrSize;
    private variable flt_Thickness;
    private variable str_Z_Start_Tenths;
    private variable int_Z_Start_Tenths_mm;
    private variable str_Z_Seek_FW;
    private variable flt_Height;
    private variable flt_BaseOffset;
    private variable str_Z_AbsoluteMove_n_FW;
    private variable str_Y_AbsoluteMove_n_FW;
    private variable flt_AcceptableTilt_mm;
    private variable int_Return;
    private variable flt_A;
    private variable str_FW_Return;
    private variable str_Z_Start_Motor;
    private variable int_ExpectedPlateIndex;
    private variable int_Index;
    private variable arr_int_ExpectedPosition[];
    private variable arr_int_MaxPlates[];
    private variable arr_int_Z_End_Motor[];
    private variable arr_str_Y_Tenths[];
    private variable arr_flt_Y[];
    private variable arr_flt_Z[];
    private variable arr_int_CurrentPosition[];
    private variable arr_int_Z_Tenths[];
    private variable arr_Copy[];
    private variable arr_flt_ContainerHeight[];
    private variable arr_flt_Z_Labware_mm[];
    private variable arr_flt_StackHeight[];
    private variable arr_int_Index[];
    private variable arr_int_Z_Start_Motor[];
    private variable arr_str_Z_Start_Tenths[];
    private variable arr_flt_ContainerRimOffset[];
    private variable arr_flt_Z_OffsetToSkirt[];
    private variable arr_int_Z_Start_Tenths_mm[];
    o_intResultCheckOfFalseLoading = 0;
    o_strMessageResult = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Start Submethod : DATA_CheckPlatesInStacks_TeachingNeedles<<<<<<<<<<"));
    arr_flt_ContainerRimOffset.SetSize(0);
    arr_flt_ContainerRimOffset.AddAsLast(i_fltStack1OffsetOfContainerRim);
    arr_flt_ContainerRimOffset.AddAsLast(i_fltStack2OffsetOfContainerRim);
    arr_flt_ContainerRimOffset.AddAsLast(i_fltStack3OffsetOfContainerRim);
    arr_flt_ContainerRimOffset.AddAsLast(i_fltStack4OffsetOfContainerRim);
    arr_flt_Z.SetSize(0);
    arr_flt_Z_OffsetToSkirt.SetSize(0);
    arr_int_Z_Tenths.SetSize(0);
    arr_flt_StackHeight.SetSize(0);
    arr_flt_ContainerHeight.SetSize(0);
    arr_flt_Y.SetSize(0);
    arr_int_MaxPlates.SetSize(0);
    arr_int_CurrentPosition.SetSize(0);
    arr_int_ExpectedPosition.SetSize(0);
    flt_ContainerHeight = 0;
    flt_Z_ConversionFactor = 0.01072765;
    str_ChannelPattern = Translate("11111111");
    flt_AcceptableZRange_mm = 5.0;
    flt_AcceptableTilt_mm = 2.0;
    o_strMessageResult = Translate("Results of Checking Plates in Stacks:\n");
    o_intResultCheckOfFalseLoading = 0;
    int_CurrentPosition = io_seqStack1.GetCurrentPosition();
    arr_int_CurrentPosition.AddAsLast(int_CurrentPosition);
    io_seqStack1.SetCurrentPosition(1);
    str_LabwareID = SeqGetLabwareId(io_seqStack1);
    DevGetLabwarePosition(ML_STAR, str_LabwareID, flt_X, flt_Y, flt_Z, flt_A);
    arr_flt_Y.AddAsLast(flt_Y);
    arr_flt_Z.AddAsLast(flt_Z);
    flt_Z = flt_Z * 10;
    flt_Z = MthRound(flt_Z, 0);
    arr_int_Z_Tenths.AddAsLast(flt_Z);
    LABWARE_PROPERTIES::Get_StackHeight(ML_STAR, io_seqStack1, flt_Z);
    arr_flt_StackHeight.AddAsLast(flt_Z);
    LABWARE_PROPERTIES::Get_Height(ML_STAR, io_seqStack1, flt_Height);
    LABWARE_PROPERTIES::Get_ContainerBaseThickness(ML_STAR, io_seqStack1, flt_Thickness);
    LABWARE_PROPERTIES::Get_ContainerBaseOffset(ML_STAR, io_seqStack1, 1, flt_BaseOffset);
    {
      flt_ContainerHeight = flt_Height - flt_BaseOffset - flt_Thickness;
      arr_flt_ContainerHeight.AddAsLast(flt_ContainerHeight);
      arr_flt_Z_OffsetToSkirt.AddAsLast(flt_BaseOffset + flt_Thickness);
    }
    int_MaxPlates = SeqGetMax(io_seqStack1);
    arr_int_MaxPlates.AddAsLast(int_MaxPlates);
    int_CurrentPosition = io_seqStack2.GetCurrentPosition();
    arr_int_CurrentPosition.AddAsLast(int_CurrentPosition);
    io_seqStack2.SetCurrentPosition(1);
    str_LabwareID = SeqGetLabwareId(io_seqStack2);
    DevGetLabwarePosition(ML_STAR, str_LabwareID, flt_X, flt_Y, flt_Z, flt_A);
    arr_flt_Y.AddAsLast(flt_Y);
    arr_flt_Z.AddAsLast(flt_Z);
    flt_Z = flt_Z * 10;
    flt_Z = MthRound(flt_Z, 0);
    arr_int_Z_Tenths.AddAsLast(flt_Z);
    LABWARE_PROPERTIES::Get_StackHeight(ML_STAR, io_seqStack2, flt_Z);
    arr_flt_StackHeight.AddAsLast(flt_Z);
    LABWARE_PROPERTIES::Get_Height(ML_STAR, io_seqStack2, flt_Height);
    LABWARE_PROPERTIES::Get_ContainerBaseThickness(ML_STAR, io_seqStack2, flt_Thickness);
    LABWARE_PROPERTIES::Get_ContainerBaseOffset(ML_STAR, io_seqStack2, 1, flt_BaseOffset);
    {
      flt_ContainerHeight = flt_Height - flt_BaseOffset - flt_Thickness;
      arr_flt_ContainerHeight.AddAsLast(flt_ContainerHeight);
      arr_flt_Z_OffsetToSkirt.AddAsLast(flt_BaseOffset + flt_Thickness);
    }
    int_MaxPlates = SeqGetMax(io_seqStack2);
    arr_int_MaxPlates.AddAsLast(int_MaxPlates);
    int_CurrentPosition = io_seqStack3.GetCurrentPosition();
    arr_int_CurrentPosition.AddAsLast(int_CurrentPosition);
    io_seqStack3.SetCurrentPosition(1);
    str_LabwareID = SeqGetLabwareId(io_seqStack3);
    DevGetLabwarePosition(ML_STAR, str_LabwareID, flt_X, flt_Y, flt_Z, flt_A);
    arr_flt_Y.AddAsLast(flt_Y);
    arr_flt_Z.AddAsLast(flt_Z);
    flt_Z = flt_Z * 10;
    flt_Z = MthRound(flt_Z, 0);
    arr_int_Z_Tenths.AddAsLast(flt_Z);
    LABWARE_PROPERTIES::Get_StackHeight(ML_STAR, io_seqStack3, flt_Z);
    arr_flt_StackHeight.AddAsLast(flt_Z);
    LABWARE_PROPERTIES::Get_Height(ML_STAR, io_seqStack3, flt_Height);
    LABWARE_PROPERTIES::Get_ContainerBaseThickness(ML_STAR, io_seqStack3, flt_Thickness);
    LABWARE_PROPERTIES::Get_ContainerBaseOffset(ML_STAR, io_seqStack3, 1, flt_BaseOffset);
    {
      flt_ContainerHeight = flt_Height - flt_BaseOffset - flt_Thickness;
      arr_flt_ContainerHeight.AddAsLast(flt_ContainerHeight);
      arr_flt_Z_OffsetToSkirt.AddAsLast(flt_BaseOffset + flt_Thickness);
    }
    int_MaxPlates = SeqGetMax(io_seqStack3);
    arr_int_MaxPlates.AddAsLast(int_MaxPlates);
    int_CurrentPosition = io_seqStack4.GetCurrentPosition();
    arr_int_CurrentPosition.AddAsLast(int_CurrentPosition);
    io_seqStack4.SetCurrentPosition(1);
    str_LabwareID = SeqGetLabwareId(io_seqStack4);
    DevGetLabwarePosition(ML_STAR, str_LabwareID, flt_X, flt_Y, flt_Z, flt_A);
    arr_flt_Y.AddAsLast(flt_Y);
    arr_flt_Z.AddAsLast(flt_Z);
    flt_Z = flt_Z * 10;
    flt_Z = MthRound(flt_Z, 0);
    arr_int_Z_Tenths.AddAsLast(flt_Z);
    LABWARE_PROPERTIES::Get_StackHeight(ML_STAR, io_seqStack4, flt_Z);
    arr_flt_StackHeight.AddAsLast(flt_Z);
    LABWARE_PROPERTIES::Get_Height(ML_STAR, io_seqStack4, flt_Height);
    LABWARE_PROPERTIES::Get_ContainerBaseThickness(ML_STAR, io_seqStack4, flt_Thickness);
    LABWARE_PROPERTIES::Get_ContainerBaseOffset(ML_STAR, io_seqStack4, 1, flt_BaseOffset);
    {
      flt_ContainerHeight = flt_Height - flt_BaseOffset - flt_Thickness;
      arr_flt_ContainerHeight.AddAsLast(flt_ContainerHeight);
      arr_flt_Z_OffsetToSkirt.AddAsLast(flt_BaseOffset + flt_Thickness);
    }
    int_MaxPlates = SeqGetMax(io_seqStack4);
    arr_int_MaxPlates.AddAsLast(int_MaxPlates);
    arr_int_CurrentPosition.AddAsLast(int_CurrentPosition);
    if (arr_int_MaxPlates.ElementAt( 1 -1) < i_intStack1ExpectedNumberOfPlates)
    {
      o_intResultCheckOfFalseLoading = 1;
      o_strMessageResult = Translate("\nThe expected number of plates exceeds the total number of plates for Stack 1.");
    }
    if (arr_int_MaxPlates.ElementAt( 2 -1) < i_intStack2ExpectedNumberOfPlates)
    {
      o_intResultCheckOfFalseLoading = 1;
      o_strMessageResult = Translate("\nThe expected number of plates exceeds the total number of plates for Stack 2.");
    }
    if (arr_int_MaxPlates.ElementAt( 3 -1) < i_intStack3ExpectedNumberOfPlates)
    {
      o_intResultCheckOfFalseLoading = 1;
      o_strMessageResult = Translate("\nThe expected number of plates exceeds the total number of plates for Stack 3.");
    }
    if (arr_int_MaxPlates.ElementAt( 4 -1) < i_intStack4ExpectedNumberOfPlates)
    {
      o_intResultCheckOfFalseLoading = 1;
      o_strMessageResult = Translate("\nThe expected number of plates exceeds the total number of plates for Stack 4.");
    }
    if (o_intResultCheckOfFalseLoading == 1)
    {
      return;
    }
    Util2::Debug::TraceArray(Translate("arr_flt_StackHeight"), arr_flt_StackHeight);
    Util2::Debug::TraceArray(Translate("arr_flt_ContainerHeight"), arr_flt_ContainerHeight);
    Util2::Debug::TraceArray(Translate("arr_int_MaxPlates"), arr_int_MaxPlates);
    Util2::Debug::TraceArray(Translate("arr_int_Z_Tenths"), arr_int_Z_Tenths);
    arr_Copy = HSLExtensions::Array::Sort(arr_int_Z_Tenths, 2, int_Return);
    arr_int_Index = HSLExtensions::Array::FindValue(arr_int_Z_Tenths, arr_Copy.ElementAt( 1 -1));
    int_Index = arr_int_Index.ElementAt( 1 -1);
    int_Z_Start_Tenths_mm = 0;
    str_Z_Start_Tenths = Translate("");
    {
      //Seek will begin from 1 extra stack height plus 8 mm above the tallest stack for safety
      int_Z_Start_Tenths_mm = MthRound((arr_Copy.ElementAt(0) + (arr_flt_ContainerHeight.ElementAt(int_Index - 1) * 10) + 80),0);
      str_Z_Start_Tenths = StrFillLeft(StrIStr(int_Z_Start_Tenths_mm),"0",4);
    }
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      //Use the reported X coordinate and adjust it to the middle of the plate
      flt_X = flt_X + 5.5 * 9;
    }
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    arr_str_Y_Tenths.SetSize(0);
    {
      //Use the reported A1 Y coordinate of each stack and adjust to 4.8 mm in +Y of the A row and 4.8 mm in -Y of the H row, then convert to tenths of mm
      variable bucket,i;
      for(i = 0; i < arr_flt_Y.GetSize(); i++)
         {
           bucket = StrIStr(MthRound(((arr_flt_Y.ElementAt(i) + 4.8) * 10),0));
           bucket = StrFillLeft(bucket,"0",4);
           arr_str_Y_Tenths.AddAsLast(bucket);
           bucket = StrIStr(MthRound(((arr_flt_Y.ElementAt(i) - (4.8 + 7 * 9)) * 10),0));
           bucket = StrFillLeft(bucket,"0",4);
           arr_str_Y_Tenths.AddAsLast(bucket);
         }
      Util2::Debug::TraceArray("Y coordinates",arr_flt_Y);
    }
    str_Y_AbsoluteMove_n_FW = StrConcat12(Translate("yp"), arr_str_Y_Tenths.ElementAt( 1 -1), Translate(" "), arr_str_Y_Tenths.ElementAt( 2 -1), Translate(" "), arr_str_Y_Tenths.ElementAt( 3 -1), Translate(" "), arr_str_Y_Tenths.ElementAt( 4 -1), Translate(" "), arr_str_Y_Tenths.ElementAt( 5 -1), Translate(" "), arr_str_Y_Tenths.ElementAt( 6 -1));
    str_Y_AbsoluteMove_n_FW = StrConcat12(str_Y_AbsoluteMove_n_FW, Translate(" "), arr_str_Y_Tenths.ElementAt( 7 -1), Translate(" "), arr_str_Y_Tenths.ElementAt( 8 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    arr_str_Z_Start_Tenths.SetSize(0);
    arr_int_Z_Start_Tenths_mm.SetSize(0);
    arr_int_Z_Start_Tenths_mm.AddAsLast(int_Z_Start_Tenths_mm);
    arr_int_Z_Start_Tenths_mm.AddAsLast(int_Z_Start_Tenths_mm);
    arr_int_Z_Start_Tenths_mm.AddAsLast(int_Z_Start_Tenths_mm);
    arr_int_Z_Start_Tenths_mm.AddAsLast(int_Z_Start_Tenths_mm);
    arr_int_Z_Start_Tenths_mm.AddAsLast(int_Z_Start_Tenths_mm);
    arr_int_Z_Start_Tenths_mm.AddAsLast(int_Z_Start_Tenths_mm);
    arr_int_Z_Start_Tenths_mm.AddAsLast(int_Z_Start_Tenths_mm);
    arr_int_Z_Start_Tenths_mm.AddAsLast(int_Z_Start_Tenths_mm);
    arr_str_Z_Start_Tenths.AddAsLast(str_Z_Start_Tenths);
    arr_str_Z_Start_Tenths.AddAsLast(str_Z_Start_Tenths);
    arr_str_Z_Start_Tenths.AddAsLast(str_Z_Start_Tenths);
    arr_str_Z_Start_Tenths.AddAsLast(str_Z_Start_Tenths);
    arr_str_Z_Start_Tenths.AddAsLast(str_Z_Start_Tenths);
    arr_str_Z_Start_Tenths.AddAsLast(str_Z_Start_Tenths);
    arr_str_Z_Start_Tenths.AddAsLast(str_Z_Start_Tenths);
    arr_str_Z_Start_Tenths.AddAsLast(str_Z_Start_Tenths);
    str_Z_AbsoluteMove_n_FW = StrConcat12(Translate("zp"), arr_str_Z_Start_Tenths.ElementAt( 1 -1), Translate(" "), arr_str_Z_Start_Tenths.ElementAt( 2 -1), Translate(" "), arr_str_Z_Start_Tenths.ElementAt( 3 -1), Translate(" "), arr_str_Z_Start_Tenths.ElementAt( 4 -1), Translate(" "), arr_str_Z_Start_Tenths.ElementAt( 5 -1), Translate(" "), arr_str_Z_Start_Tenths.ElementAt( 6 -1));
    str_Z_AbsoluteMove_n_FW = StrConcat12(str_Z_AbsoluteMove_n_FW, Translate(" "), arr_str_Z_Start_Tenths.ElementAt( 7 -1), Translate(" "), arr_str_Z_Start_Tenths.ElementAt( 8 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    arr_int_Z_Start_Motor.SetSize(0);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_FW_Return = arrRetValues[3];
    }
    str_FW_Return = StrRight(str_FW_Return, 5);
    str_Z_Start_Motor = str_FW_Return;
    str_FW_Return = StrIVal(str_FW_Return);
    arr_int_Z_Start_Motor.AddAsLast(str_FW_Return);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_FW_Return = arrRetValues[3];
    }
    str_FW_Return = StrRight(str_FW_Return, 5);
    str_FW_Return = StrIVal(str_FW_Return);
    arr_int_Z_Start_Motor.AddAsLast(str_FW_Return);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_FW_Return = arrRetValues[3];
    }
    str_FW_Return = StrRight(str_FW_Return, 5);
    str_FW_Return = StrIVal(str_FW_Return);
    arr_int_Z_Start_Motor.AddAsLast(str_FW_Return);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_FW_Return = arrRetValues[3];
    }
    str_FW_Return = StrRight(str_FW_Return, 5);
    str_FW_Return = StrIVal(str_FW_Return);
    arr_int_Z_Start_Motor.AddAsLast(str_FW_Return);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_FW_Return = arrRetValues[3];
    }
    str_FW_Return = StrRight(str_FW_Return, 5);
    str_FW_Return = StrIVal(str_FW_Return);
    arr_int_Z_Start_Motor.AddAsLast(str_FW_Return);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_FW_Return = arrRetValues[3];
    }
    str_FW_Return = StrRight(str_FW_Return, 5);
    str_FW_Return = StrIVal(str_FW_Return);
    arr_int_Z_Start_Motor.AddAsLast(str_FW_Return);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_FW_Return = arrRetValues[3];
    }
    str_FW_Return = StrRight(str_FW_Return, 5);
    str_FW_Return = StrIVal(str_FW_Return);
    arr_int_Z_Start_Motor.AddAsLast(str_FW_Return);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_FW_Return = arrRetValues[3];
    }
    str_FW_Return = StrRight(str_FW_Return, 5);
    str_FW_Return = StrIVal(str_FW_Return);
    arr_int_Z_Start_Motor.AddAsLast(str_FW_Return);
    Util2::Debug::TraceArray(Translate("arr_int_Z_Start_Motor"), arr_int_Z_Start_Motor);
    str_Z_Seek_FW = StrConcat12(Translate("za09320"), Translate("zb"), str_Z_Start_Motor, Translate("zg31200"), Translate("zv12000"), Translate("zu01500"), Translate("zr075"), Translate("zw2"), Translate(""), Translate(""), Translate(""), Translate(""));
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    arr_int_Z_End_Motor.SetSize(0);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_FW_Return = arrRetValues[3];
    }
    str_FW_Return = StrRight(str_FW_Return, 5);
    str_FW_Return = StrIVal(str_FW_Return);
    arr_int_Z_End_Motor.AddAsLast(str_FW_Return);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_FW_Return = arrRetValues[3];
    }
    str_FW_Return = StrRight(str_FW_Return, 5);
    str_FW_Return = StrIVal(str_FW_Return);
    arr_int_Z_End_Motor.AddAsLast(str_FW_Return);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_FW_Return = arrRetValues[3];
    }
    str_FW_Return = StrRight(str_FW_Return, 5);
    str_FW_Return = StrIVal(str_FW_Return);
    arr_int_Z_End_Motor.AddAsLast(str_FW_Return);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_FW_Return = arrRetValues[3];
    }
    str_FW_Return = StrRight(str_FW_Return, 5);
    str_FW_Return = StrIVal(str_FW_Return);
    arr_int_Z_End_Motor.AddAsLast(str_FW_Return);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_FW_Return = arrRetValues[3];
    }
    str_FW_Return = StrRight(str_FW_Return, 5);
    str_FW_Return = StrIVal(str_FW_Return);
    arr_int_Z_End_Motor.AddAsLast(str_FW_Return);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_FW_Return = arrRetValues[3];
    }
    str_FW_Return = StrRight(str_FW_Return, 5);
    str_FW_Return = StrIVal(str_FW_Return);
    arr_int_Z_End_Motor.AddAsLast(str_FW_Return);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_FW_Return = arrRetValues[3];
    }
    str_FW_Return = StrRight(str_FW_Return, 5);
    str_FW_Return = StrIVal(str_FW_Return);
    arr_int_Z_End_Motor.AddAsLast(str_FW_Return);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_FW_Return = arrRetValues[3];
    }
    str_FW_Return = StrRight(str_FW_Return, 5);
    str_FW_Return = StrIVal(str_FW_Return);
    arr_int_Z_End_Motor.AddAsLast(str_FW_Return);
    Util2::Debug::TraceArray(Translate("arr_int_Z_End_Motor"), arr_int_Z_End_Motor);
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    int_ArrSize=arr_int_Z_End_Motor.GetSize();
    arr_flt_Z_Labware_mm.SetSize(0);
    {
      variable i(0),bucket(0);
      for(i;i < int_ArrSize;i++)
         {
           bucket = MthRound((arr_int_Z_Start_Tenths_mm.ElementAt(i) / 10 - (arr_int_Z_Start_Motor.ElementAt(i) - arr_int_Z_End_Motor.ElementAt(i)) * flt_Z_ConversionFactor),1);
           arr_flt_Z_Labware_mm.AddAsLast(bucket);
         }
    }
    Util2::Debug::TraceArray(Translate("arr_flt_Z_Labware_mm"), arr_flt_Z_Labware_mm);
    int_ExpectedPlateIndex = arr_int_MaxPlates.ElementAt( 1 -1) - i_intStack1ExpectedNumberOfPlates;
    arr_int_ExpectedPosition.AddAsLast(int_ExpectedPlateIndex);
    SeqIncrement(io_seqStack1, int_ExpectedPlateIndex);
    str_LabwareID = SeqGetLabwareId(io_seqStack1);
    if (str_LabwareID != "")
    {
      DevGetLabwarePosition(ML_STAR, str_LabwareID, flt_X, flt_Y, flt_Z, flt_A);
      {
        flt_Z = flt_Z + arr_flt_ContainerHeight.ElementAt(0) - arr_flt_ContainerRimOffset.ElementAt(0);
      }
    }
    else
    {
      io_seqStack1.SetCurrentPosition(arr_int_MaxPlates.ElementAt( 1 -1));
      str_LabwareID = SeqGetLabwareId(io_seqStack1);
      DevGetLabwarePosition(ML_STAR, str_LabwareID, flt_X, flt_Y, flt_Z, flt_A);
      {
        flt_Z = flt_Z - arr_flt_Z_OffsetToSkirt.ElementAt(0);
      }
    }
    {
      variable flt_Max, flt_Min, int_Tilt, int_Plates(i_intStack1ExpectedNumberOfPlates), i(1), bucket(0);
      flt_Max = MthMax(arr_flt_Z_Labware_mm.ElementAt(0),arr_flt_Z_Labware_mm.ElementAt(1));
      flt_Min = MthMin(arr_flt_Z_Labware_mm.ElementAt(0),arr_flt_Z_Labware_mm.ElementAt(1));
      //using flt_Min because a labware will rotate about the side with lower Z instead of about the midline, and a tilt is most likely about the X axis rather than the Y axis.  This will change the Z of the lower side by a very small amount, if it is tilted at all.
      if(flt_Max - flt_Min > flt_AcceptableTilt_mm)
         {
           Trace("Labware tilt detected");
           MessageBox("Labware tilt detected.  Please ensure the labware stacks are flat. Press OK to continue","WARNING",hslOK);
         }
      if(flt_Min <= flt_Z + flt_AcceptableZRange_mm  && flt_Min >= flt_Z - flt_AcceptableZRange_mm)
         {
           //Correct number of plates
           Trace("The correct number of plates are in Stack 1.");
           o_strMessageResult = StrConcat12(o_strMessageResult,"\nThe correct number of plates are in Stack 1.","","","","","","","","","","");
         }
      else if(flt_Min < flt_Z - flt_AcceptableZRange_mm)
         {
           //Less plates than expected
           o_intResultCheckOfFalseLoading = 1;
           while(int_Plates >= 0)
              {
                int_Plates = int_Plates - 1;
                if(flt_Min - bucket < flt_Z + flt_AcceptableZRange_mm - (i * arr_flt_StackHeight.ElementAt(0)) && flt_Min - bucket > flt_Z - flt_AcceptableZRange_mm - (i * arr_flt_StackHeight.ElementAt(0)))
                   {
                     //Found the number of plates
                     break;
                   }
                else
                   {
                     i = i + 1;
                   }
              }
           Trace("WARNING: Less than the required number of plates in Stack 1.  Expected: ",i_intStack1ExpectedNumberOfPlates," Found: ",int_Plates);
           o_strMessageResult = StrConcat12(o_strMessageResult,"\nWARNING: Less than the required number of plates in Stack 1.  Expected: ",i_intStack1ExpectedNumberOfPlates," Found: ",int_Plates,"","","","","","","");
           o_intResultCheckOfFalseLoading = 1;
         }
      else if(flt_Min > flt_Z + flt_AcceptableZRange_mm)
         {
           //More plates than expected
           o_intResultCheckOfFalseLoading = 1;
           while(int_Plates <= arr_int_MaxPlates.ElementAt(0))
              {
                int_Plates = int_Plates + 1;
                if(flt_Min < flt_Z + flt_AcceptableZRange_mm + (i * arr_flt_StackHeight.ElementAt(0)) && flt_Min > flt_Z - flt_AcceptableZRange_mm + (i * arr_flt_StackHeight.ElementAt(0)))
                   {
                     //Found the number of plates
                     break;
                   }
                else
                   {
                     i = i + 1;
                   }
              }
           Trace("WARNING: More than the required number of plates in Stack 1.  Expected: ",i_intStack1ExpectedNumberOfPlates," Found: ",int_Plates);
           o_strMessageResult = StrConcat12(o_strMessageResult,"\nWARNING: More than the required number of plates in Stack 1.  Expected: ",i_intStack1ExpectedNumberOfPlates," Found: ",int_Plates,"","","","","","","");
           o_intResultCheckOfFalseLoading = 1;
         }
    }
    int_ExpectedPlateIndex = arr_int_MaxPlates.ElementAt( 2 -1) - i_intStack2ExpectedNumberOfPlates;
    arr_int_ExpectedPosition.AddAsLast(int_ExpectedPlateIndex);
    SeqIncrement(io_seqStack2, int_ExpectedPlateIndex);
    str_LabwareID = SeqGetLabwareId(io_seqStack2);
    if (str_LabwareID != "")
    {
      DevGetLabwarePosition(ML_STAR, str_LabwareID, flt_X, flt_Y, flt_Z, flt_A);
      {
        flt_Z = flt_Z + arr_flt_ContainerHeight.ElementAt(1) - arr_flt_ContainerRimOffset.ElementAt(1);
      }
    }
    else
    {
      io_seqStack2.SetCurrentPosition(arr_int_MaxPlates.ElementAt( 2 -1));
      str_LabwareID = SeqGetLabwareId(io_seqStack2);
      DevGetLabwarePosition(ML_STAR, str_LabwareID, flt_X, flt_Y, flt_Z, flt_A);
      {
        flt_Z = flt_Z - arr_flt_Z_OffsetToSkirt.ElementAt(1);
      }
    }
    {
      variable flt_Max, flt_Min, int_Tilt, int_Plates(i_intStack2ExpectedNumberOfPlates), i(1), bucket(0);
      flt_Max = MthMax(arr_flt_Z_Labware_mm.ElementAt(2),arr_flt_Z_Labware_mm.ElementAt(3));
      flt_Min = MthMin(arr_flt_Z_Labware_mm.ElementAt(2),arr_flt_Z_Labware_mm.ElementAt(3));
      //using flt_Min because a labware will rotate about the side with lower Z instead of about the midline, and a tilt is most likely about the X axis rather than the Y axis.  This will change the Z of the lower side by a very small amount, if it is tilted at all.
      if(flt_Max - flt_Min > flt_AcceptableTilt_mm)
         {
           Trace("Labware tilt detected");
           MessageBox("Labware tilt detected.  Please ensure the labware stacks are flat. Press OK to continue","WARNING",hslOK);
         }
      if(flt_Min <= flt_Z + flt_AcceptableZRange_mm  && flt_Min >= flt_Z - flt_AcceptableZRange_mm)
         {
           //Correct number of plates
           Trace("The correct number of plates are in Stack 2.");
           o_strMessageResult = StrConcat12(o_strMessageResult,"\nThe correct number of plates are in Stack 2.","","","","","","","","","","");
         }
      else if(flt_Min < flt_Z - flt_AcceptableZRange_mm)
         {
           //Less plates than expected
           o_intResultCheckOfFalseLoading = 1;
           while(int_Plates >= 0)
              {
                int_Plates = int_Plates - 1;
                if(flt_Min - bucket < flt_Z + flt_AcceptableZRange_mm - (i * arr_flt_StackHeight.ElementAt(1)) && flt_Min - bucket > flt_Z - flt_AcceptableZRange_mm - (i * arr_flt_StackHeight.ElementAt(1)))
                   {
                     //Found the number of plates
                     break;
                   }
                else
                   {
                     i = i + 1;
                   }
              }
           Trace("WARNING: Less than the required number of plates in Stack 2.  Expected: ",i_intStack2ExpectedNumberOfPlates," Found: ",int_Plates);
           o_strMessageResult = StrConcat12(o_strMessageResult,"\nWARNING: Less than the required number of plates in Stack 2.  Expected: ",i_intStack2ExpectedNumberOfPlates," Found: ",int_Plates,"","","","","","","");
           o_intResultCheckOfFalseLoading = 1;
         }
      else if(flt_Min > flt_Z + flt_AcceptableZRange_mm)
         {
           //More plates than expected
           o_intResultCheckOfFalseLoading = 1;
           while(int_Plates <= arr_int_MaxPlates.ElementAt(1))
              {
                int_Plates = int_Plates + 1;
                if(flt_Min < flt_Z + flt_AcceptableZRange_mm + (i * arr_flt_StackHeight.ElementAt(1)) && flt_Min > flt_Z - flt_AcceptableZRange_mm + (i * arr_flt_StackHeight.ElementAt(1)))
                   {
                     //Found the number of plates
                     break;
                   }
                else
                   {
                     i = i + 1;
                   }
              }
           Trace("WARNING: More than the required number of plates in Stack 2.  Expected: ",i_intStack2ExpectedNumberOfPlates," Found: ",int_Plates);
           o_strMessageResult = StrConcat12(o_strMessageResult,"\nWARNING: More than the required number of plates in Stack 2.  Expected: ",i_intStack2ExpectedNumberOfPlates," Found: ",int_Plates,"","","","","","","");
           o_intResultCheckOfFalseLoading = 1;
         }
    }
    int_ExpectedPlateIndex = arr_int_MaxPlates.ElementAt( 3 -1) - i_intStack3ExpectedNumberOfPlates;
    arr_int_ExpectedPosition.AddAsLast(int_ExpectedPlateIndex);
    SeqIncrement(io_seqStack3, int_ExpectedPlateIndex);
    str_LabwareID = SeqGetLabwareId(io_seqStack3);
    if (str_LabwareID != "")
    {
      DevGetLabwarePosition(ML_STAR, str_LabwareID, flt_X, flt_Y, flt_Z, flt_A);
      {
        flt_Z = flt_Z + arr_flt_ContainerHeight.ElementAt(2) - arr_flt_ContainerRimOffset.ElementAt(2);
      }
    }
    else
    {
      io_seqStack3.SetCurrentPosition(arr_int_MaxPlates.ElementAt( 3 -1));
      str_LabwareID = SeqGetLabwareId(io_seqStack3);
      DevGetLabwarePosition(ML_STAR, str_LabwareID, flt_X, flt_Y, flt_Z, flt_A);
      {
        flt_Z = flt_Z - arr_flt_Z_OffsetToSkirt.ElementAt(2);
      }
    }
    {
      variable flt_Max, flt_Min, int_Tilt, int_Plates(i_intStack3ExpectedNumberOfPlates), i(1), bucket(0);
      flt_Max = MthMax(arr_flt_Z_Labware_mm.ElementAt(4),arr_flt_Z_Labware_mm.ElementAt(5));
      flt_Min = MthMin(arr_flt_Z_Labware_mm.ElementAt(4),arr_flt_Z_Labware_mm.ElementAt(5));
      //using flt_Min because a labware will rotate about the side with lower Z instead of about the midline, and a tilt is most likely about the X axis rather than the Y axis.  This will change the Z of the lower side by a very small amount, if it is tilted at all.
      if(flt_Max - flt_Min > flt_AcceptableTilt_mm)
         {
           Trace("Labware tilt detected");
           MessageBox("Labware tilt detected.  Please ensure the labware stacks are flat. Press OK to continue","WARNING",hslOK);
         }
      if(flt_Min <= flt_Z + flt_AcceptableZRange_mm  && flt_Min >= flt_Z - flt_AcceptableZRange_mm)
         {
           //Correct number of plates
           Trace("The correct number of plates are in Stack 3.");
           o_strMessageResult = StrConcat12(o_strMessageResult,"\nThe correct number of plates are in Stack 3.","","","","","","","","","","");
         }
      else if(flt_Min < flt_Z - flt_AcceptableZRange_mm)
         {
           //Less plates than expected
           o_intResultCheckOfFalseLoading = 1;
           while(int_Plates >= 0)
              {
                int_Plates = int_Plates - 1;
                if(flt_Min - bucket < flt_Z + flt_AcceptableZRange_mm - (i * arr_flt_StackHeight.ElementAt(2)) && flt_Min - bucket > flt_Z - flt_AcceptableZRange_mm - (i * arr_flt_StackHeight.ElementAt(2)))
                   {
                     //Found the number of plates
                     break;
                   }
                else
                   {
                     i = i + 1;
                   }
              }
           Trace("WARNING: Less than the required number of plates in Stack 3.  Expected: ",i_intStack3ExpectedNumberOfPlates," Found: ",int_Plates);
           o_strMessageResult = StrConcat12(o_strMessageResult,"\nWARNING: Less than the required number of plates in Stack 3.  Expected: ",i_intStack3ExpectedNumberOfPlates," Found: ",int_Plates,"","","","","","","");
           o_intResultCheckOfFalseLoading = 1;
         }
      else if(flt_Min > flt_Z + flt_AcceptableZRange_mm)
         {
           //More plates than expected
           o_intResultCheckOfFalseLoading = 1;
           while(int_Plates <= arr_int_MaxPlates.ElementAt(2))
              {
                int_Plates = int_Plates + 1;
                if(flt_Min < flt_Z + flt_AcceptableZRange_mm + (i * arr_flt_StackHeight.ElementAt(2)) && flt_Min > flt_Z - flt_AcceptableZRange_mm + (i * arr_flt_StackHeight.ElementAt(2)))
                   {
                     //Found the number of plates
                     break;
                   }
                else
                   {
                     i = i + 1;
                   }
              }
           Trace("WARNING: More than the required number of plates in Stack 3.  Expected: ",i_intStack3ExpectedNumberOfPlates," Found: ",int_Plates);
           o_strMessageResult = StrConcat12(o_strMessageResult,"\nWARNING: More than the required number of plates in Stack 3.  Expected: ",i_intStack3ExpectedNumberOfPlates," Found: ",int_Plates,"","","","","","","");
           o_intResultCheckOfFalseLoading = 1;
         }
    }
    int_ExpectedPlateIndex = arr_int_MaxPlates.ElementAt( 4 -1) - i_intStack4ExpectedNumberOfPlates;
    arr_int_ExpectedPosition.AddAsLast(int_ExpectedPlateIndex);
    SeqIncrement(io_seqStack4, int_ExpectedPlateIndex);
    str_LabwareID = SeqGetLabwareId(io_seqStack4);
    if (str_LabwareID != "")
    {
      DevGetLabwarePosition(ML_STAR, str_LabwareID, flt_X, flt_Y, flt_Z, flt_A);
      {
        flt_Z = flt_Z + arr_flt_ContainerHeight.ElementAt(3) - arr_flt_ContainerRimOffset.ElementAt(3);
      }
    }
    else
    {
      io_seqStack4.SetCurrentPosition(arr_int_MaxPlates.ElementAt( 4 -1));
      str_LabwareID = SeqGetLabwareId(io_seqStack4);
      DevGetLabwarePosition(ML_STAR, str_LabwareID, flt_X, flt_Y, flt_Z, flt_A);
      {
        flt_Z = flt_Z - arr_flt_Z_OffsetToSkirt.ElementAt(3);
      }
    }
    {
      variable flt_Max, flt_Min, int_Tilt, int_Plates(i_intStack4ExpectedNumberOfPlates), i(1), bucket(0);
      flt_Max = MthMax(arr_flt_Z_Labware_mm.ElementAt(6),arr_flt_Z_Labware_mm.ElementAt(7));
      flt_Min = MthMin(arr_flt_Z_Labware_mm.ElementAt(6),arr_flt_Z_Labware_mm.ElementAt(7));
      //using flt_Min because a labware will rotate about the side with lower Z instead of about the midline, and a tilt is most likely about the X axis rather than the Y axis.  This will change the Z of the lower side by a very small amount, if it is tilted at all.
      if(flt_Max - flt_Min > flt_AcceptableTilt_mm)
         {
           Trace("Labware tilt detected");
           MessageBox("Labware tilt detected.  Please ensure the labware stacks are flat. Press OK to continue","WARNING",hslOK);
         }
      if(flt_Min <= flt_Z + flt_AcceptableZRange_mm  && flt_Min >= flt_Z - flt_AcceptableZRange_mm)
         {
           //Correct number of plates
           Trace("The correct number of plates are in Stack 4.");
           o_strMessageResult = StrConcat12(o_strMessageResult,"\nThe correct number of plates are in Stack 4.","","","","","","","","","","");
         }
      else if(flt_Min < flt_Z - flt_AcceptableZRange_mm)
         {
           //Less plates than expected
           o_intResultCheckOfFalseLoading = 1;
           while(int_Plates >= 0)
              {
                int_Plates = int_Plates - 1;
                if(flt_Min - bucket < flt_Z + flt_AcceptableZRange_mm - (i * arr_flt_StackHeight.ElementAt(3)) && flt_Min - bucket > flt_Z - flt_AcceptableZRange_mm - (i * arr_flt_StackHeight.ElementAt(3)))
                   {
                     //Found the number of plates
                     break;
                   }
                else
                   {
                     i = i + 1;
                   }
              }
           Trace("WARNING: Less than the required number of plates in Stack 4.  Expected: ",i_intStack4ExpectedNumberOfPlates," Found: ",int_Plates);
           o_strMessageResult = StrConcat12(o_strMessageResult,"\nWARNING: Less than the required number of plates in Stack 4.  Expected: ",i_intStack4ExpectedNumberOfPlates," Found: ",int_Plates,"","","","","","","");
           o_intResultCheckOfFalseLoading = 1;
         }
      else if(flt_Min > flt_Z + flt_AcceptableZRange_mm)
         {
           //More plates than expected
           o_intResultCheckOfFalseLoading = 1;
           while(int_Plates <= arr_int_MaxPlates.ElementAt(3))
              {
                int_Plates = int_Plates + 1;
                if(flt_Min < flt_Z + flt_AcceptableZRange_mm + (i * arr_flt_StackHeight.ElementAt(3)) && flt_Min > flt_Z - flt_AcceptableZRange_mm + (i * arr_flt_StackHeight.ElementAt(3)))
                   {
                     //Found the number of plates
                     break;
                   }
                else
                   {
                     i = i + 1;
                   }
              }
           Trace("WARNING: More than the required number of plates in Stack 4.  Expected: ",i_intStack4ExpectedNumberOfPlates," Found: ",int_Plates);
           o_strMessageResult = StrConcat12(o_strMessageResult,"\nWARNING: More than the required number of plates in Stack 4.  Expected: ",i_intStack4ExpectedNumberOfPlates," Found: ",int_Plates,"","","","","","","");
           o_intResultCheckOfFalseLoading = 1;
         }
    }
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
    {
      o_intResultCheckOfFalseLoading = 0;
    }
    if (o_intResultCheckOfFalseLoading == 0)
    {
      io_seqStack1.SetCurrentPosition(arr_int_ExpectedPosition.ElementAt( 1 -1));
      io_seqStack2.SetCurrentPosition(arr_int_ExpectedPosition.ElementAt( 2 -1));
      io_seqStack3.SetCurrentPosition(arr_int_ExpectedPosition.ElementAt( 3 -1));
      io_seqStack4.SetCurrentPosition(arr_int_ExpectedPosition.ElementAt( 4 -1));
    }
    else
    {
      io_seqStack1.SetCurrentPosition(arr_int_CurrentPosition.ElementAt( 1 -1));
      io_seqStack2.SetCurrentPosition(arr_int_CurrentPosition.ElementAt( 2 -1));
      io_seqStack3.SetCurrentPosition(arr_int_CurrentPosition.ElementAt( 3 -1));
      io_seqStack4.SetCurrentPosition(arr_int_CurrentPosition.ElementAt( 4 -1));
    }
    MECC::TraceComment(Translate(">>>>>>>>>>Submethod Complete : DATA_CheckPlatesInStacks_TeachingNeedles<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function _EjectTips( device & ML_STAR, sequence i_seqTipEject ) void {
    private variable l_intNumberOfLoops;
    private variable l_intNumberOfPositions;
    private variable l_strStepReturnValue;
    private variable l_intIndexNumberOfPositions;
    private variable l_intGetPositionFromNum;
    private variable l_intMainError;
    private variable l_intSlaveError;
    private variable l_blnRepeatTipEjectToRecoverError;
    {
      for(l_intNumberOfLoops = 0; l_intNumberOfLoops < 5;)
      {
        l_intNumberOfLoops = l_intNumberOfLoops + 1;
        Trace("Ejecting tips trial number ",l_intNumberOfLoops);
        onerror goto errLabel_15 ;
        err.Clear();
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          	l_strStepReturnValue = arrRetValues[2];
        }
        break;
        errLabel_15 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          Trace("Ejecting tips failed - trying to recover error automatically ");
          l_strStepReturnValue = ErrGetDataAt(3);
          l_intNumberOfPositions = StepReturn::GetNumberOfPositions(l_strStepReturnValue);
          {
            for(l_intIndexNumberOfPositions = 0; l_intIndexNumberOfPositions < l_intNumberOfPositions;)
            {
              l_intIndexNumberOfPositions = l_intIndexNumberOfPositions + 1;
              l_intGetPositionFromNum = StepReturn::GetPositionFromNum(l_intIndexNumberOfPositions, l_strStepReturnValue);
              l_intMainError = StepReturn::GetMainError(l_intIndexNumberOfPositions, l_strStepReturnValue);
              l_intSlaveError = StepReturn::GetSlaveError(l_intIndexNumberOfPositions, l_strStepReturnValue);
              if (l_intMainError != 0)
              {
                Trace("Main error ",l_intMainError);
                Trace("Slave error ",l_intSlaveError);
                l_blnRepeatTipEjectToRecoverError = 0;
                if(l_intMainError ==2 && l_intSlaveError ==77)
                {
                  l_blnRepeatTipEjectToRecoverError =1;
                }
                if (l_blnRepeatTipEjectToRecoverError == 0)
                {
                  MECC::TraceComment(Translate("Automated errorhandling couldn£t recover the problem.\n\nIn that case there are other reasons for a tip not being able to be ejected by a channel the standard command will be repeated once to give the user the chance to use the default error handling.\nThe loop will be interupted for further repetitions"));
                  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  break;
                }
              }
            }
          }
        }   /* end if from skip handler if no error */
      }
    }
  }

  function Process_SizeSelection( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, sequence & i_seqLiquidWaste, sequence & i_seqPositionHHS, sequence & i_seqTransferPositionNewMidiPlate, sequence & i_seqAspirationPositionEthanol, sequence & i_seqAspirationPositionResuspensionBuffer, sequence & i_seqMagneticStandPosition, sequence & i_trpPositionMIDIWaste, variable i_strLiquidClassResuspensionBuffer, variable i_strLiquidClassEthanol, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMixing, variable i_fltVolumeTransferSupernatantDuringSizeSelection, variable i_fltVolumeEthanol, variable i_fltVolumeBeadsFirstSeparation, variable i_fltVolumeBeadsSecondSeparation, variable i_fltVolumeResuspensionBuffer, variable i_intShakerDevice, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationResuspendCleanedLibrary, variable i_blnActivateBatchProcessForScaleUp, variable i_intNumberOfColumnsWithinOneBatch, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver ) void {
    private sequence l_arrSequenceBatchProcessingCleanUp[];
    private variable l_intBatchCounter;
    private variable l_strBatchInformation;
    private variable l_intLoopCounterSizeSelectionCycle;
    private variable l_intNumberOfCalculatedBatchesToBeProcessed;
    private variable l_strConcatMessageASWStatusWindow;
    private variable l_strReadCurrentBarcode;
    private timer l_hdlOverdryingTimerAirDryingEthanol;
    private timer l_hdlTimerIncubationAfterResuspendation;
    private timer l_hdlTimerIncubationAvoidingBeadCarryOverAtMagneticStand;
    private sequence l_seqCurrentIntermediateBatch;
    private timer l_hdlTimerIncubationAtMagent;
    private timer l_hldTimerIncubationAfterShakingAtHeaterShaker;
    private variable l_strLabwareIDAspiration;
    private variable l_strTypeOfLabware;
    private variable l_blnActivateIncrementSequence;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Process_SizeSelection <<<<<<<<<"));
    Trace("++++  i_fltVolumeBeadsFirstSeparation",i_fltVolumeBeadsFirstSeparation," ++++++  i_fltVolumeBeadsSecondSeparation ",i_fltVolumeBeadsSecondSeparation);
    VectorCustomDialogs::Initialize();
    DATA_UpdateInformationIntoReportFile(Translate("Process size selection ..."), ASWGLOBAL::BOOL::TRUE);
    _DATA_CalculateAndDefineBatchProcessCleanUp(i_intNumberOfColumnsWithinOneBatch, i_blnActivateBatchProcessForScaleUp, i_seqMagneticStandPosition, l_arrSequenceBatchProcessingCleanUp, l_intNumberOfCalculatedBatchesToBeProcessed);
    {
      for(l_intLoopCounterSizeSelectionCycle = 0; l_intLoopCounterSizeSelectionCycle < 2;)
      {
        l_intLoopCounterSizeSelectionCycle = l_intLoopCounterSizeSelectionCycle + 1;
        l_strConcatMessageASWStatusWindow = StrConcat2(Translate("... magnetic size selection cycle number "), l_intLoopCounterSizeSelectionCycle);
        VectorCustomDialogs::AppendStatusText(l_strConcatMessageASWStatusWindow);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          l_strLabwareIDAspiration = SeqGetLabwareId(i_seqAspirationPositionBeads);
          _DATA_InterpreteLabwareID(l_strLabwareIDAspiration, l_strTypeOfLabware);
          if (l_strTypeOfLabware == "tube")
          {
            l_blnActivateIncrementSequence = ASWGLOBAL::BOOL::TRUE;
          }
          if (l_strTypeOfLabware == "trough")
          {
            l_blnActivateIncrementSequence = ASWGLOBAL::BOOL::FALSE;
          }
          PIP_MixOnly(ML_STAR, i_seqMixPositionBeads, 0, i_strLiquidClassBeadsMixing, 10, 0);
          if (l_intLoopCounterSizeSelectionCycle == 1)
          {
            PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionBeads, i_seqPositionHHS, i_fltVolumeBeadsFirstSeparation, i_strLiquidClassBeads, 0, 0, 0, 0, 1, ASWGLOBAL::BOOL::TRUE, l_blnActivateIncrementSequence, ASWGLOBAL::BOOL::FALSE);
          }
          else
          {
            PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionBeads, i_seqPositionHHS, i_fltVolumeBeadsSecondSeparation, i_strLiquidClassBeads, 0, 0, 0, 0, 1, ASWGLOBAL::BOOL::TRUE, l_blnActivateIncrementSequence, ASWGLOBAL::BOOL::FALSE);
          }
        }
        _HHS_Shake(i_intShakerDevice, i_intShakerRPMBeadSampleMixing, i_intShakerDurationBeadSampleMixing);
        DATA_IncubationTimer(l_hldTimerIncubationAfterShakingAtHeaterShaker, i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, 1);
        Trp_MIDI(ML_STAR, i_seqPositionHHS, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
        DATA_IncubationTimer(l_hdlTimerIncubationAtMagent, i_intTimeForSeparationAtMagneticStand, 1);
        if (l_intLoopCounterSizeSelectionCycle == 1)
        {
          if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
          {
            PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqMagneticStandPosition, i_seqTransferPositionNewMidiPlate, i_fltVolumeTransferSupernatantDuringSizeSelection, i_strLiquidClassBeads, 0, 0, 0, 0.7, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
          }
          Trp_MIDI(ML_STAR, i_seqMagneticStandPosition, i_trpPositionMIDIWaste, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
          Trp_MIDI(ML_STAR, i_seqTransferPositionNewMidiPlate, i_seqPositionHHS, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
        }
      }
    }
    SeqRemoveAll(l_seqCurrentIntermediateBatch);
    {
      for(l_intBatchCounter = 0; l_intBatchCounter < l_intNumberOfCalculatedBatchesToBeProcessed;)
      {
        l_intBatchCounter = l_intBatchCounter + 1;
        l_seqCurrentIntermediateBatch=l_arrSequenceBatchProcessingCleanUp.GetAt(l_intBatchCounter-1);
        AlignSequences(hslTrue, l_seqCurrentIntermediateBatch, 1, i_seqMagneticStandPosition, 1);
        l_seqCurrentIntermediateBatch.SetCurrentPosition(1);
        if(0){
          TrcTraceSequence(l_seqCurrentIntermediateBatch);
        }
        l_strBatchInformation = StrConcat4(Translate("...batch "), l_intBatchCounter, Translate(" of "), l_intNumberOfCalculatedBatchesToBeProcessed);
        VectorCustomDialogs::AppendStatusText(l_strBatchInformation);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, l_seqCurrentIntermediateBatch, i_seqLiquidWaste, 250, Translate("NGSStar_SVF_EthanolSupernatentToWaste_JetEmpty"));
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          _PIP_MultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPositionEthanol, l_seqCurrentIntermediateBatch, i_fltVolumeEthanol, i_strLiquidClassEthanol, 6);
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, l_seqCurrentIntermediateBatch, i_seqLiquidWaste, 210, Translate("NGSStar_SVF_EthanolSupernatentToWaste_JetEmpty"));
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          _PIP_MultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPositionEthanol, l_seqCurrentIntermediateBatch, i_fltVolumeEthanol, i_strLiquidClassEthanol, 6);
        }
        DATA_IncubationTimer(l_hdlOverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, 2);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, l_seqCurrentIntermediateBatch, i_seqLiquidWaste, 210, Translate("NGSStar_SVF_EthanolSupernatentToWaste_JetEmpty"));
        }
        VectorCustomDialogs::AppendStatusText(Translate("Incubation bead air drying at magnetic stand"));
        l_seqCurrentIntermediateBatch.SetCurrentPosition(1);
        DATA_IncubationTimer(l_hdlOverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, 3);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionResuspensionBuffer, l_seqCurrentIntermediateBatch, i_fltVolumeResuspensionBuffer, i_strLiquidClassResuspensionBuffer, 0, 0, 0, 0, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    Trp_MIDI(ML_STAR, i_seqMagneticStandPosition, i_seqPositionHHS, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    _HHS_Shake(i_intShakerDevice, i_intShakerRPMResuspendCleanedLibrary, i_intShakerDurationResuspendCleanedLibrary);
    _HHS_Shake(i_intShakerDevice, 800, 10);
    DATA_IncubationTimer(l_hdlTimerIncubationAfterResuspendation, i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, 1);
    Trp_MIDI(ML_STAR, i_seqPositionHHS, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    DATA_IncubationTimer(l_hdlTimerIncubationAvoidingBeadCarryOverAtMagneticStand, i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver, 1);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: Process_SizeSelection <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _DATA_ScheduleTips( sequence i_seqControllingPipettingSequence, variable i_blnTipExchangeDuringTransfer, variable i_intCurrentTipType, variable i_blnMPHused ) void {
    private variable l_intCurrentTipType;
    private variable l_intUsedTipsCurrentStep;
    private variable l_intNumberOfTipsUnnecessary;
    if (i_blnMPHused == ASWGLOBAL::BOOL::FALSE)
    {
      t_intGetTotalSequenceDispense = i_seqControllingPipettingSequence.GetCount();
      l_intCurrentTipType = i_intCurrentTipType;
      if (t_intGetTotalSequenceDispense < t_intNumberOfAllAvailableChannels)
      {
        l_intUsedTipsCurrentStep = t_intGetTotalSequenceDispense;
      }
      else
      {
        l_intUsedTipsCurrentStep = t_intNumberOfAllAvailableChannels;
      }
      Trace ("Number of samples  :", t_intGetTotalSequenceDispense);
      Trace ("current tip type (1 = 300ul; 5 = 1000ul or 23 = 50ul  :", l_intCurrentTipType);
      if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
      {
        Trace ("Tip Exchange During Transfer activated? :", i_blnTipExchangeDuringTransfer);
        if (l_intCurrentTipType == 1)
        {
          t_intScheduledNumberOfSVFTPerSample = t_intScheduledNumberOfSVFTPerSample + 1;
          Trace ("Scheduled tips  -- per sample -- 300ul :", t_intScheduledNumberOfSVFTPerSample);
        }
        if (l_intCurrentTipType == 5)
        {
          t_intScheduledNumberOfHVFTPerSample = t_intScheduledNumberOfHVFTPerSample + 1;
          Trace ("Scheduled tips -- per sample -- 1000ul :", t_intScheduledNumberOfHVFTPerSample);
        }
        if (l_intCurrentTipType == 23)
        {
          t_intScheduledNumberOfLVFTPerSample = t_intScheduledNumberOfLVFTPerSample + 1;
          Trace ("Scheduled tips -- per sample -- 50ul :", t_intScheduledNumberOfLVFTPerSample);
        }
      }
      else
      {
        Trace ("Tip Exchange During Transfer activated? :", i_blnTipExchangeDuringTransfer);
        if (l_intCurrentTipType == 1)
        {
          t_intScheduledNumberOfSVFTExtra = t_intScheduledNumberOfSVFTExtra + l_intUsedTipsCurrentStep;
          Trace ("Scheduled tips -- extra -- 300ul :", t_intScheduledNumberOfSVFTExtra);
        }
        if (l_intCurrentTipType == 5)
        {
          t_intScheduledNumberOfHVFTExtra = t_intScheduledNumberOfHVFTExtra + l_intUsedTipsCurrentStep;
          Trace ("Scheduled tips -- extra -- 1000ul :", t_intScheduledNumberOfHVFTExtra);
        }
        if (l_intCurrentTipType == 23)
        {
          t_intScheduledNumberOfLVFTExtra = t_intScheduledNumberOfLVFTExtra + l_intUsedTipsCurrentStep;
          Trace ("Scheduled tips -- extra -- 50ul :", t_intScheduledNumberOfLVFTExtra);
        }
      }
    }
    else
    {
      l_intCurrentTipType = i_intCurrentTipType;
      l_intNumberOfTipsUnnecessary = 7;
      Trace ("Number of samples  :", t_intGetTotalSequenceDispense);
      Trace ("current tip type (1 = 300ul; 5 = 1000ul or 23 = 50ul  :", l_intCurrentTipType);
      if (l_intCurrentTipType == 1)
      {
        t_intScheduledNumberOfSVFTPerSample = t_intScheduledNumberOfSVFTPerSample + 1;
        Trace ("Scheduled tips  -- per sample -- 300ul :", t_intScheduledNumberOfSVFTPerSample);
        t_intScheduledNumberOfSVFTExtra = t_intScheduledNumberOfSVFTExtra + l_intNumberOfTipsUnnecessary;
        Trace ("Scheduled tips -- extra -- 300ul :", t_intScheduledNumberOfSVFTExtra);
      }
      if (l_intCurrentTipType == 23)
      {
        t_intScheduledNumberOfLVFTPerSample = t_intScheduledNumberOfLVFTPerSample + 1;
        Trace ("Scheduled tips -- per sample -- 50ul :", t_intScheduledNumberOfLVFTPerSample);
        t_intScheduledNumberOfLVFTExtra = t_intScheduledNumberOfLVFTExtra + l_intNumberOfTipsUnnecessary;
        Trace ("Scheduled tips -- extra -- 50ul :", t_intScheduledNumberOfLVFTExtra);
      }
    }
  }

  private function _DATA_ScheduleConsumables( variable i_strPlateType, variable i_strLabwareIDOfSourcePosition ) void {
    private variable l_intNewLID;
    private variable l_intNewMIDI;
    private variable l_intNewHSP;
    Trace ("Plate type  :", i_strPlateType);
    Trace ("Labware ID  :", i_strLabwareIDOfSourcePosition);
    if (i_strPlateType == "MIDI")
    {
      l_intNewMIDI = StrFind(i_strLabwareIDOfSourcePosition, Translate("Stack"));
      Trace ("Found string +Stack+ within current labware ID ?  :", l_intNewMIDI);
      if (l_intNewMIDI >= 0)
      {
        t_intScheduledNumberOfMIDI = t_intScheduledNumberOfMIDI + 1;
      }
    }
    if (i_strPlateType == "HSP")
    {
      l_intNewHSP = StrFind(i_strLabwareIDOfSourcePosition, Translate("Stack"));
      Trace ("Found string +Stack+ within current labware ID ?  :", l_intNewHSP);
      if (l_intNewHSP >= 0)
      {
        t_intScheduledNumberOfHSP = t_intScheduledNumberOfHSP + 1;
      }
    }
    if (i_strPlateType == "LID")
    {
      l_intNewLID = StrFind(i_strLabwareIDOfSourcePosition, Translate("Waste"));
      Trace ("Found string +Waste+ within current labware ID ?  :", l_intNewLID);
      if (l_intNewLID >= 0)
      {
        t_intScheduledNumberOfHamiltonComfortLid = t_intScheduledNumberOfHamiltonComfortLid + 1;
      }
    }
  }

  function PIP_ReagentsFromTubeOrTroughOrPlataToPlate_pLLD( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltDispenseHeightFromBottom, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtDispenseOnFixHeight ) void {
    private variable l_strVolume;
    private variable l_blnStringDispenseModeSurfaceEmpty;
    private variable l_strStepReturnValueDispense;
    private variable l_intMainLoopTransferLiquids;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strStepReturnValueAspiration;
    private variable l_strLabwareIDAspiration;
    private variable l_intCurrentDispenseMode;
    private variable l_strTypeOfLabware;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intCurrentTipType;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    private variable l_intNumberOfSamples;
    private variable l_strCurrentDispenseMode;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strInformationToBeUpdated;
    private variable l_intMixCycleAspiration;
    private variable l_intMixCycleDispense;
    private variable l_blnActivateLiquidFollowing;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_ReagentsFromTubeOrTroughOrPlateToPlate <<<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strVolume = StrFStr(i_fltVolume);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_blnStringDispenseModeSurfaceEmpty = StrFind(i_strLiquidClassNameTransfer, Translate("SurfaceEmpty"));
      _DATA_PlausibilityCheckVolume(i_fltVolume, l_intCurrentTipType);
      l_strLabwareIDAspiration = SeqGetLabwareId(i_seqAspirationPosition);
      _DATA_InterpreteLabwareID(l_strLabwareIDAspiration, l_strTypeOfLabware);
      l_intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        _DATA_ScheduleTips(i_seqDispensePosition, ASWGLOBAL::BOOL::TRUE, l_intCurrentTipType, ASWGLOBAL::BOOL::FALSE);
        _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
        if (i_fltVolumeMixDispense == 0)
        {
          l_intMixCycleDispense = 0;
        }
        else
        {
          l_intMixCycleDispense = i_intMixCycles;
        }
        if (i_fltVolumeMixAspiration == 0)
        {
          l_intMixCycleAspiration = 0;
        }
        else
        {
          l_intMixCycleAspiration = i_intMixCycles;
        }
        MECC::TraceComment(Translate("********** Now pipetting reagents to destination plate"));
        if (l_intCurrentTipType == 1)
        {
          {
            l_intMainLoopTransferLiquids = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, i_seqDispensePosition, 1, t_seqTips300, 1);
              l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
              if (i_fltDispenseHeightFromBottom == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              else
              {
                if(0){
                  if (i_fltDispenseHeightFromBottom <= 3)
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
                  }
                  else
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
                  }
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
              _EjectTips(ML_STAR, ML_STAR.Waste08);
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            t_seqTips300.SetMax(t_seqTips300.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (l_intCurrentTipType == 5)
        {
          {
            l_intMainLoopTransferLiquids = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, i_seqDispensePosition, 1, t_seqTips1000, 1);
              l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
              if (i_fltDispenseHeightFromBottom == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              else
              {
                if(0){
                  if (i_fltDispenseHeightFromBottom <= 3)
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
                  }
                  else
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
                  }
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
              _EjectTips(ML_STAR, ML_STAR.Waste08);
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            t_seqTips1000.SetMax(t_seqTips1000.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
        if (l_intCurrentTipType == 23)
        {
          {
            l_intMainLoopTransferLiquids = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, i_seqDispensePosition, 1, t_seqTips50, 1);
              l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
              if (i_fltDispenseHeightFromBottom == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              else
              {
                if(0){
                  if (i_fltDispenseHeightFromBottom <= 3)
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
                  }
                  else
                  {
                    l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
                  }
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
              }
              _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
              _EjectTips(ML_STAR, ML_STAR.Waste08);
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            t_seqTips50.SetMax(t_seqTips50.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
      }
      if (l_strCurrentDispenseMode == "Part")
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        VectorCustomDialogs::ErrorDialog(Translate("Error Indication - Unsupported Dispense Mode"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Unsupported dispense mode detected."), Translate(""));
        abort;
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, i_seqAspirationPosition);
      {
        variable _FilterIdsArray_2[];
        variable _ColumnIdsArray_2[];
        variable _ColumnNamesArray_2[];
        variable _ExperimentsArray_2[];
        _FilterIdsArray_2.SetSize(0);
        _ColumnNamesArray_2.SetSize(14);
        _ColumnIdsArray_2.SetSize(14);
        _ColumnNamesArray_2.SetAt(0, "RecordId");
        _ColumnIdsArray_2.SetAt(0, 0);
        _ColumnNamesArray_2.SetAt(1, "TRackBC");
        _ColumnIdsArray_2.SetAt(1, 1);
        _ColumnNamesArray_2.SetAt(2, "TLabwareId");
        _ColumnIdsArray_2.SetAt(2, 2);
        _ColumnNamesArray_2.SetAt(3, "TPositionId");
        _ColumnIdsArray_2.SetAt(3, 3);
        _ColumnNamesArray_2.SetAt(4, "TPositionBC");
        _ColumnIdsArray_2.SetAt(4, 4);
        _ColumnNamesArray_2.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_2.SetAt(5, 5);
        _ColumnNamesArray_2.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_2.SetAt(6, 6);
        _ColumnNamesArray_2.SetAt(7, "TVolume");
        _ColumnIdsArray_2.SetAt(7, 7);
        _ColumnNamesArray_2.SetAt(8, "SRackBC");
        _ColumnIdsArray_2.SetAt(8, 8);
        _ColumnNamesArray_2.SetAt(9, "SLabwareId");
        _ColumnIdsArray_2.SetAt(9, 9);
        _ColumnNamesArray_2.SetAt(10, "SPositionId");
        _ColumnIdsArray_2.SetAt(10, 10);
        _ColumnNamesArray_2.SetAt(11, "SPositionBC");
        _ColumnIdsArray_2.SetAt(11, 11);
        _ColumnNamesArray_2.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_2.SetAt(12, 12);
        _ColumnNamesArray_2.SetAt(13, "UserName");
        _ColumnIdsArray_2.SetAt(13, 13);
        _ExperimentsArray_2.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqDispensePosition, 3, _FilterIdsArray_2, 0, _ColumnIdsArray_2, _ColumnNamesArray_2, _ExperimentsArray_2, "Reagents_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_ReagentsFromTubeOrTroughOrPlateToPlate<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_MixOnly( device & ML_STAR, sequence i_seqAspirationPosition, variable i_fltAspirateHeightFromBottom, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltMixingVolume ) void {
    private variable l_strVolume;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strInformationToBeUpdated;
    private sequence i_seqDispensePosition;
    private variable l_blnStringDispenseModeSurfaceEmpty;
    private variable l_intMainLoopTransferLiquids;
    private variable l_strStepReturnValueAspiration;
    private variable l_strLabwareIDAspiration;
    private variable l_intCurrentDispenseMode;
    private variable l_strTypeOfLabware;
    private variable l_intCurrentTipType;
    private variable l_fltTrackingReagentTroughlVolume;
    private variable l_fltVolumeAspirateChannel1;
    private variable l_fltMeasuredVolume_Channel1;
    private variable l_intVolumeMix;
    private variable l_intNumberOfActivatedChannels;
    private variable l_intVolumeMixPerChannel;
    private variable l_intApirationSequenceEndposition;
    private variable l_blnActivateLiquidFollowing;
    private variable l_str_LabId;
    private variable l_str_PosId;
    private variable loopCounter1;
    private variable l_arr_strLabId[];
    private variable l_arr_strPosId[];
    private variable l_arr_strLabId_distinct[];
    private variable l_intNumberOfPositionsForMixing;
    private variable l_arr_strPosId_distinct[];
    private variable loopCounter2;
    private variable l_strChannelPatternMixOnly;
    private sequence l_seqAspirationMixOnly;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_MixOnly <<<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    l_arr_strLabId.SetSize(0);
    l_arr_strPosId.SetSize(0);
    i_seqAspirationPosition.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (i_seqAspirationPosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqAspirationPosition, 1);
        loopCounter1 = loopCounter1 + 1;
        l_str_LabId = SeqGetLabwareId(i_seqAspirationPosition);
        l_str_PosId = SeqGetPositionId(i_seqAspirationPosition);
        l_arr_strLabId.AddAsLast(l_str_LabId);
        l_arr_strPosId.AddAsLast(l_str_PosId);
        SeqIncrement(i_seqAspirationPosition, 1);
        if (
           (i_seqAspirationPosition.GetCurrentPosition() > 0 && i_seqAspirationPosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
      i_seqAspirationPosition.SetCurrentPosition(1);
    }
    ARRAYTOOLS::get_distinct_from_array(l_arr_strLabId, l_arr_strLabId_distinct);
    ARRAYTOOLS::get_distinct_from_array(l_arr_strPosId, l_arr_strPosId_distinct);
    l_intNumberOfPositionsForMixing=l_arr_strPosId_distinct.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < l_intNumberOfPositionsForMixing;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(l_seqAspirationMixOnly, l_str_LabId, l_arr_strPosId_distinct.ElementAt( loopCounter2 -1));
      }
    }
    l_seqAspirationMixOnly.SetCurrentPosition(1);
    CREATE_CHANNEL_PATTERN::Create_Channel_Pattern(1, l_intNumberOfPositionsForMixing, t_intNumberOfAllAvailableChannels, l_strChannelPatternMixOnly);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    if (i_fltMixingVolume == 0)
    {
      o_strTrimmedVolume = Translate(" automated calculated by aspiration step");
      l_strInformationToBeUpdated = StrConcat8(Translate("Mix reagents"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfSourceSequence, Translate(". Mix volume "), o_strTrimmedVolume, Translate("."));
    }
    else
    {
      l_strVolume = StrFStr(i_fltMixingVolume);
      l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
      l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
      o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
      l_strInformationToBeUpdated = StrConcat8(Translate("Mix reagents"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfSourceSequence, Translate(". Mix volume "), o_strTrimmedVolume, Translate(" µl."));
    }
    DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_blnStringDispenseModeSurfaceEmpty = StrFind(i_strLiquidClassNameTransfer, Translate("SurfaceEmpty"));
      if (i_fltMixingVolume > 0)
      {
        _DATA_PlausibilityCheckVolume(i_fltMixingVolume, l_intCurrentTipType);
      }
      else
      {
      }
      l_strLabwareIDAspiration = SeqGetLabwareId(l_seqAspirationMixOnly);
      _DATA_InterpreteLabwareID(l_strLabwareIDAspiration, l_strTypeOfLabware);
      _DATA_ScheduleTips(i_seqDispensePosition, ASWGLOBAL::BOOL::FALSE, l_intCurrentTipType, ASWGLOBAL::BOOL::FALSE);
      if (l_intCurrentTipType == 1)
      {
        {
          l_intMainLoopTransferLiquids = 0;
          while (
             (l_seqAspirationMixOnly.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, t_seqTips300, 1, l_seqAspirationMixOnly, 1);
            l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
            if (l_intMainLoopTransferLiquids == 1)
            {
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (i_fltAspirateHeightFromBottom == 0)
              {
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                l_fltMeasuredVolume_Channel1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, l_seqAspirationMixOnly, 0, Translate("10000000"), 0, 0, 0);
                l_fltVolumeAspirateChannel1 = HSLML_STAR::GetContainerVolume(1);
                l_fltVolumeAspirateChannel1 = l_fltVolumeAspirateChannel1 * 1000;
                l_fltTrackingReagentTroughlVolume = l_fltVolumeAspirateChannel1;
                if (t_blnSimulationModeON == 1)
                {
                  l_fltTrackingReagentTroughlVolume = 12000;
                }
                Trace (">>> After the cLLD check, the reagent container volume is:  ", l_fltTrackingReagentTroughlVolume);
                l_intVolumeMix = l_fltTrackingReagentTroughlVolume * 0.75;
                l_intApirationSequenceEndposition = l_seqAspirationMixOnly.GetCount();
                if (l_intApirationSequenceEndposition < t_intNumberOfAllAvailableChannels)
                {
                  l_intNumberOfActivatedChannels = l_intApirationSequenceEndposition;
                }
                else
                {
                  l_intNumberOfActivatedChannels = t_intNumberOfAllAvailableChannels;
                }
                if (l_strTypeOfLabware == "trough")
                {
                  MECC::TraceComment(Translate("If it is a trough : mixing volume is divided by number of active channels as containers are connected"));
                  l_intVolumeMixPerChannel = l_intVolumeMix / (l_intNumberOfActivatedChannels * 1.0);
                }
                else
                {
                  MECC::TraceComment(Translate("It is a plate or a tube. containers are not connected. Mixing volume is not divided by number of channels"));
                  l_intVolumeMixPerChannel = l_intVolumeMix;
                }
                if (l_intVolumeMixPerChannel > 270)
                {
                  MECC::TraceComment(Translate("Mix volume limited to max 270 µl."));
                  l_intVolumeMixPerChannel = 270;
                }
                ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
                if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
                {
                  MECC::TraceComment(Translate("Mix volume simulated and set to 200 µl."));
                  l_intVolumeMixPerChannel = 200;
                }
                if (l_intVolumeMixPerChannel < 0)
                {
                  l_intVolumeMixPerChannel = 15;
                  MECC::TraceComment(Translate("300 ul tips used - low volume detected - leading to a negative mixing volume by accident - overwritten to a small volume to mix --> 15ul"));
                }
                Trace("l_intVolumeMixPerChannel : ",l_intVolumeMixPerChannel);
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                if (i_fltMixingVolume > 270)
                {
                  MECC::TraceComment(Translate("Mix volume limited to max 270 µl."));
                  l_intVolumeMixPerChannel = 270;
                }
                else
                {
                  l_intVolumeMixPerChannel = i_fltMixingVolume;
                }
                if (i_fltAspirateHeightFromBottom <= 1.8)
                {
                  l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
                }
                else
                {
                  l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
                }
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
            }
            if (
               (l_seqAspirationMixOnly.GetCurrentPosition() > 0 && l_seqAspirationMixOnly.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          t_seqTips300.SetMax(t_seqTips300.GetTotal());
          l_seqAspirationMixOnly.SetMax(l_seqAspirationMixOnly.GetTotal());
          l_seqAspirationMixOnly.SetCurrentPosition(1);
        }
        _EjectTips(ML_STAR, ML_STAR.Waste08);
        DATA_TipCounterWrite(ML_STAR);
      }
      if (l_intCurrentTipType == 5)
      {
        {
          l_intMainLoopTransferLiquids = 0;
          while (
             (l_seqAspirationMixOnly.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, t_seqTips1000, 1, l_seqAspirationMixOnly, 1);
            l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
            if (l_intMainLoopTransferLiquids == 1)
            {
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            }
            if (i_fltAspirateHeightFromBottom == 0)
            {
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              l_fltMeasuredVolume_Channel1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, l_seqAspirationMixOnly, 0, Translate("10000000"), 0, 0, 0);
              l_fltVolumeAspirateChannel1 = HSLML_STAR::GetContainerVolume(1);
              l_fltVolumeAspirateChannel1 = l_fltVolumeAspirateChannel1 * 1000;
              l_fltTrackingReagentTroughlVolume = l_fltVolumeAspirateChannel1;
              if (t_blnSimulationModeON == 1)
              {
                l_fltTrackingReagentTroughlVolume = 12000;
              }
              Trace (">>> After the cLLD check, the reagent container volume is:  ", l_fltTrackingReagentTroughlVolume);
              l_intVolumeMix = l_fltTrackingReagentTroughlVolume * 0.75;
              l_intApirationSequenceEndposition = l_seqAspirationMixOnly.GetCount();
              if (l_intApirationSequenceEndposition < t_intNumberOfAllAvailableChannels)
              {
                l_intNumberOfActivatedChannels = l_intApirationSequenceEndposition;
              }
              else
              {
                l_intNumberOfActivatedChannels = t_intNumberOfAllAvailableChannels;
              }
              if (l_strTypeOfLabware == "trough")
              {
                MECC::TraceComment(Translate("If it is a trough : mixing volume is divided by number of active channels as containers are connected"));
                l_intVolumeMixPerChannel = l_intVolumeMix / (l_intNumberOfActivatedChannels * 1.0);
              }
              else
              {
                MECC::TraceComment(Translate("It is a plate or a tube. containers are not connected. Mixing volume is not divided by number of channels"));
                l_intVolumeMixPerChannel = l_intVolumeMix;
              }
              if (l_intVolumeMixPerChannel > 900)
              {
                MECC::TraceComment(Translate("Mix volume limited to max 900 µl."));
                l_intVolumeMixPerChannel = 900;
              }
              ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
              if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
              {
                MECC::TraceComment(Translate("Mix volume simulated and set to 200 µl."));
                l_intVolumeMixPerChannel = 200;
              }
              if (l_intVolumeMixPerChannel < 0)
              {
                l_intVolumeMixPerChannel = 50;
                MECC::TraceComment(Translate("1000 ul tips used - low volume detected - leading to a negative mixing volume by accident - overwritten to a small volume to mix --> 50ul"));
              }
              Trace("l_intVolumeMixPerChannel : ",l_intVolumeMixPerChannel);
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
            }
            else
            {
              if (i_fltMixingVolume > 900)
              {
                MECC::TraceComment(Translate("Mix volume limited to max 900 µl."));
                l_intVolumeMixPerChannel = 900;
              }
              else
              {
                l_intVolumeMixPerChannel = i_fltMixingVolume;
              }
              if (i_fltAspirateHeightFromBottom <= 1.8)
              {
                l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
              }
              else
              {
                l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
            }
            if (
               (l_seqAspirationMixOnly.GetCurrentPosition() > 0 && l_seqAspirationMixOnly.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          t_seqTips1000.SetMax(t_seqTips1000.GetTotal());
          l_seqAspirationMixOnly.SetMax(l_seqAspirationMixOnly.GetTotal());
          l_seqAspirationMixOnly.SetCurrentPosition(1);
        }
        _EjectTips(ML_STAR, ML_STAR.Waste08);
        DATA_TipCounterWrite(ML_STAR);
      }
      if (l_intCurrentTipType == 23)
      {
        {
          l_intMainLoopTransferLiquids = 0;
          while (
             (l_seqAspirationMixOnly.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, t_seqTips50, 1, l_seqAspirationMixOnly, 1);
            l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
            if (l_intMainLoopTransferLiquids == 1)
            {
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            }
            if (i_fltAspirateHeightFromBottom == 0)
            {
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              l_fltMeasuredVolume_Channel1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, l_seqAspirationMixOnly, 0, Translate("10000000"), 0, 0, 0);
              l_fltVolumeAspirateChannel1 = HSLML_STAR::GetContainerVolume(1);
              l_fltVolumeAspirateChannel1 = l_fltVolumeAspirateChannel1 * 1000;
              l_fltTrackingReagentTroughlVolume = l_fltVolumeAspirateChannel1;
              if (t_blnSimulationModeON == 1)
              {
                l_fltTrackingReagentTroughlVolume = 12000;
              }
              Trace (">>> After the cLLD check, the reagent container volume is:  ", l_fltTrackingReagentTroughlVolume);
              l_intVolumeMix = l_fltTrackingReagentTroughlVolume * 0.75;
              l_intApirationSequenceEndposition = l_seqAspirationMixOnly.GetCount();
              if (l_intApirationSequenceEndposition < t_intNumberOfAllAvailableChannels)
              {
                l_intNumberOfActivatedChannels = l_intApirationSequenceEndposition;
              }
              else
              {
                l_intNumberOfActivatedChannels = t_intNumberOfAllAvailableChannels;
              }
              if (l_strTypeOfLabware == "trough")
              {
                MECC::TraceComment(Translate("If it is a trough : mixing volume is divided by number of active channels as containers are connected"));
                l_intVolumeMixPerChannel = l_intVolumeMix / (l_intNumberOfActivatedChannels * 1.0);
              }
              else
              {
                MECC::TraceComment(Translate("It is a plate or a tube. containers are not connected. Mixing volume is not divided by number of channels"));
                l_intVolumeMixPerChannel = l_intVolumeMix;
              }
              if (l_intVolumeMixPerChannel > 45)
              {
                MECC::TraceComment(Translate("Mix volume limited to max 45 µl."));
                l_intVolumeMixPerChannel = 45;
              }
              ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
              if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
              {
                MECC::TraceComment(Translate("Mix volume simulated and set to 20 µl."));
                l_intVolumeMixPerChannel = 20;
              }
              if (l_intVolumeMixPerChannel < 0)
              {
                l_intVolumeMixPerChannel = 10;
                MECC::TraceComment(Translate("50 ul tips used - low volume detected - leading to a negative mixing volume by accident - overwritten to a small volume to mix --> 10ul"));
              }
              Trace("l_intVolumeMixPerChannel : ",l_intVolumeMixPerChannel);
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
            }
            else
            {
              if (i_fltMixingVolume > 45)
              {
                MECC::TraceComment(Translate("Mix volume limited to max 45 µl."));
                l_intVolumeMixPerChannel = 45;
              }
              else
              {
                l_intVolumeMixPerChannel = i_fltMixingVolume;
              }
              if (i_fltAspirateHeightFromBottom <= 1.8)
              {
                l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::FALSE;
              }
              else
              {
                l_blnActivateLiquidFollowing = ASWGLOBAL::BOOL::TRUE;
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
            }
            if (
               (l_seqAspirationMixOnly.GetCurrentPosition() > 0 && l_seqAspirationMixOnly.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          t_seqTips50.SetMax(t_seqTips50.GetTotal());
          l_seqAspirationMixOnly.SetMax(l_seqAspirationMixOnly.GetTotal());
          l_seqAspirationMixOnly.SetCurrentPosition(1);
        }
        _EjectTips(ML_STAR, ML_STAR.Waste08);
        DATA_TipCounterWrite(ML_STAR);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_MixOnly <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _DATA_GetLabwareIDAndSequenceNamesFromDeck( device & io_instrument, variable & o_arrayLabwareNames[], variable & o_arraySeqNames[] ) void {
    o_arrayLabwareNames.SetSize( 0);
    {
        object obj_Decklayout;
        obj_Decklayout = io_instrument.GetDeckLayoutObject();
        if (!obj_Decklayout.IsNull())
            {
                  object EditDecklayout5;
                  object Parameter;
                  object LabwareObjects;
                  object LabwareNames;
                  object SequenceNames;
                  variable Array_Keys[];
                  variable i;
                  variable _str_labID;
                  variable _str_seqName;
                  obj_Decklayout.GetObject("IEditDeckLayout5", EditDecklayout5);
                  LabwareObjects.CreateObject("HXPARAMSLib.HxPars");
                  SequenceNames.CreateObject("HXPARAMSLib.HxPars");
                  LabwareNames.CreateObject("HXPARAMSLib.HxPars");
                  //Get Labware IDs
                  obj_Decklayout.TemplateLabwareNames(LabwareObjects);
                  Array_Keys = LabwareObjects.GetKeys();
                  for(i=1; i<=Array_Keys.GetSize(); i++)
                  {
                      LabwareNames = LabwareObjects.Item1(i);
                      _str_labID = LabwareNames.Item1("Labwr_Id");
                      o_arrayLabwareNames.AddAsLast(_str_labID);
                  }
                  //Get Sequence Names
                  obj_Decklayout.DeckSequenceNames(SequenceNames);
                  for(i=1; i<=SequenceNames.Count(); i++)
                  {
                       _str_seqName = SequenceNames.Item (i);
                       o_arraySeqNames.AddAsLast(_str_seqName);
                  }
                  obj_Decklayout.ReleaseObject();
                  EditDecklayout5.ReleaseObject();
                  Parameter.ReleaseObject();
           }
    }
    MECC::TraceComment(Translate("**************************** HSL Code Complete **************************** "));
    Util2::Debug::TraceArray(Translate("Labware names"), o_arrayLabwareNames);
    Util2::Debug::TraceArray(Translate("Sequence names"), o_arraySeqNames);
  }

  function DATA_HandoverSequencesAndDataToSMT( device & ML_STAR, variable i_intTransportTool, variable i_strKitProvider, variable i_strKitName, variable i_blnDeactivatePipettingStepsForTransportTests, variable i_blnReduceChannelpatternFrom8To4, variable i_strEmailAdress, variable i_blnLockUnlockSystem, variable & o_strFullPathReportFile, sequence & o_arrTipAdapters[], variable i_blnUseMPH ) void {
    private variable l_strTransferVolume;
    private variable l_blnCOREGripDoNotExist;
    private variable l_strPosIDTarget;
    private variable l_strLabIDSource;
    private variable l_strCurrentTime;
    private variable l_strCurrentDate;
    private variable l_bln300FTipsDoNotExist;
    private variable l_bln50FTipsDoNotExist;
    private variable l_bln1000FTipsDoNotExist;
    private variable l_strPosIDSource;
    private variable l_intArrayPosition;
    private variable l_strLabIDTarget;
    private variable l_blnTipSupportDoNotExist;
    private sequence i_seqTip50Filter;
    private sequence i_seqTip300Filter;
    private sequence i_seqCOREGripper;
    private sequence i_seqTipSupport;
    private sequence i_seqTip1000Filter;
    private file l_hdlNGSStarReportFile;
    private variable l_arrIndexes[];
    private variable l_arrSequenceNames[];
    private variable l_arrLabwareNames[];
    private variable l_strTranslatedPipettingInformationDispense;
    private variable l_strTranslatedPipettingInformationAspiration;
    private variable l_strTranslatedTransportInformation;
    private variable l_strBarcodeInformation;
    private variable l_intReturnSearchString_ST;
    private variable loopCounter1;
    private variable l_intReturnSearchString_50;
    private variable l_intReturnSearchString_HT;
    private variable l_intNumberOfSequencesOnDeck;
    private variable loopCounter2;
    private variable l_intNumberOfTipAdapters;
    o_strFullPathReportFile = 0;
    o_arrTipAdapters.SetSize( 0);
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_HandoverSequencesAndDataToSMT<<<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    t_blnSimulationModeON = Util::GetSimulationMode();
    _DATA_GetLabwareIDAndSequenceNamesFromDeck(ML_STAR, l_arrLabwareNames, l_arrSequenceNames);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    t_blnLockUnlockSystem = i_blnLockUnlockSystem;
    if (i_blnReduceChannelpatternFrom8To4 == 1)
    {
      Trace(" Channelpattern set to a 4 channel system");
      t_strChannelpattern = Translate("1111");
      t_strTransportChannelpattern = Translate("0011");
      t_intFrontChannelCORETransport = 4;
      t_intNumberOfAllAvailableChannels = 4;
      t_blnClinicalNGSStarlet = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      Trace(" Channelpattern set to an 8 channel system");
      t_strChannelpattern = Translate("11111111");
      t_strTransportChannelpattern = Translate("00000011");
      t_intFrontChannelCORETransport = 8;
      t_intNumberOfAllAvailableChannels = 8;
      t_blnClinicalNGSStarlet = ASWGLOBAL::BOOL::FALSE;
    }
    if (i_strEmailAdress == "")
    {
      t_blnDeactivateEmailFunctions = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      t_blnDeactivateEmailFunctions = ASWGLOBAL::BOOL::FALSE;
      t_strRecipientEmailAdress = i_strEmailAdress;
    }
    l_arrIndexes = HSLExtensions::Array::FindValue(l_arrSequenceNames, Translate("MlStar50ulTipWithFilter"));
    l_bln50FTipsDoNotExist = HSLExtensions::Array::IsEmpty(l_arrIndexes);
    if (l_bln50FTipsDoNotExist == ASWGLOBAL::BOOL::FALSE)
    {
      l_intArrayPosition = l_arrIndexes.ElementAt( 1 -1);
      DevGetSequenceRef(ML_STAR, l_arrSequenceNames.ElementAt( l_intArrayPosition -1), i_seqTip50Filter);
      SeqRemoveAll(t_seqTips50);
      SeqCopySequence(t_seqTips50, i_seqTip50Filter);
      t_intStartPositionTip50 = t_seqTips50.GetCurrentPosition();
      t_strTipCounterNameTip50 = Translate("50F_Counter");
      t_intConsumedTips50BeforeRelaodTips = 0;
      t_intConsumedTips50 = 0;
      t_intTotalConsumedTips50 = 0;
      TrcTrace(Translate("Sequence handed over to submethod library:   "), l_arrSequenceNames.ElementAt( l_intArrayPosition -1));
    }
    l_arrIndexes.SetSize(0);
    l_arrIndexes = HSLExtensions::Array::FindValue(l_arrSequenceNames, Translate("MlStar300ulStandardVolumeTipWithFilter"));
    l_bln300FTipsDoNotExist = HSLExtensions::Array::IsEmpty(l_arrIndexes);
    if (l_bln300FTipsDoNotExist == ASWGLOBAL::BOOL::FALSE)
    {
      l_intArrayPosition = l_arrIndexes.ElementAt( 1 -1);
      DevGetSequenceRef(ML_STAR, l_arrSequenceNames.ElementAt( l_intArrayPosition -1), i_seqTip300Filter);
      SeqRemoveAll(t_seqTips300);
      SeqCopySequence(t_seqTips300, i_seqTip300Filter);
      t_intStartPositionTip300 = t_seqTips300.GetCurrentPosition();
      t_strTipCounterNameTip300 = Translate("SVF_Counter");
      t_intConsumedTips300BeforeRelaodTips = 0;
      t_intConsumedTips300 = 0;
      t_intTotalConsumedTips300 = 0;
      TrcTrace(Translate("Sequence handed over to submethod library:   "), l_arrSequenceNames.ElementAt( l_intArrayPosition -1));
    }
    l_arrIndexes.SetSize(0);
    l_arrIndexes = HSLExtensions::Array::FindValue(l_arrSequenceNames, Translate("MlStar1000ulHighVolumeTipWithFilter"));
    l_bln1000FTipsDoNotExist = HSLExtensions::Array::IsEmpty(l_arrIndexes);
    if (l_bln1000FTipsDoNotExist == ASWGLOBAL::BOOL::FALSE)
    {
      l_intArrayPosition = l_arrIndexes.ElementAt( 1 -1);
      DevGetSequenceRef(ML_STAR, l_arrSequenceNames.ElementAt( l_intArrayPosition -1), i_seqTip1000Filter);
      SeqRemoveAll(t_seqTips1000);
      SeqCopySequence(t_seqTips1000, i_seqTip1000Filter);
      t_intStartPositionTip1000 = t_seqTips1000.GetCurrentPosition();
      t_strTipCounterNameTip1000 = Translate("1000F_Counter");
      t_intConsumedTips1000BeforeRelaodTips = 0;
      t_intConsumedTips1000 = 0;
      t_intTotalConsumedTips1000 = 0;
      TrcTrace(Translate("Sequence handed over to submethod library:   "), l_arrSequenceNames.ElementAt( l_intArrayPosition -1));
    }
    l_arrIndexes.SetSize(0);
    DATA_TipCounterWrite(ML_STAR);
    l_arrIndexes = HSLExtensions::Array::FindValue(l_arrSequenceNames, Translate("COREGripTool_OnWaste_1000ul_0001"));
    l_blnCOREGripDoNotExist = HSLExtensions::Array::IsEmpty(l_arrIndexes);
    if (l_blnCOREGripDoNotExist == ASWGLOBAL::BOOL::FALSE)
    {
      l_intArrayPosition = l_arrIndexes.ElementAt( 1 -1);
      DevGetSequenceRef(ML_STAR, l_arrSequenceNames.ElementAt( l_intArrayPosition -1), i_seqCOREGripper);
      SeqRemoveAll(t_seqCOREGripper);
      SeqCopySequence(t_seqCOREGripper, i_seqCOREGripper);
      TrcTrace(Translate("Sequence handed over to submethod library:   "), l_arrSequenceNames.ElementAt( l_intArrayPosition -1));
    }
    l_arrIndexes.SetSize(0);
    t_arrTipAdapters.SetSize(3);
    o_arrTipAdapters.SetSize(3);
    l_intNumberOfSequencesOnDeck=l_arrSequenceNames.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < l_intNumberOfSequencesOnDeck;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_intReturnSearchString_50 = StrFind(l_arrSequenceNames.ElementAt( loopCounter1 -1), Translate("TipSupport_50"));
        if (l_intReturnSearchString_50 >= 0)
        {
          l_intArrayPosition = loopCounter1;
          DevGetSequenceRef(ML_STAR, l_arrSequenceNames.ElementAt( l_intArrayPosition -1), i_seqTipSupport);
          SeqRemoveAll(t_seqTipSupport);
          SeqCopySequence(t_seqTipSupport, i_seqTipSupport);
          t_arrTipAdapters.SetAt(1-1, i_seqTipSupport);
          o_arrTipAdapters.SetAt(1-1, i_seqTipSupport);
          TrcTrace(Translate("Sequence handed over to submethod library:   "), l_arrSequenceNames.ElementAt( l_intArrayPosition -1));
        }
        l_intReturnSearchString_ST = StrFind(l_arrSequenceNames.ElementAt( loopCounter1 -1), Translate("TipSupport_ST"));
        if (l_intReturnSearchString_ST >= 0)
        {
          l_intArrayPosition = loopCounter1;
          if(0){
            l_intArrayPosition = l_arrIndexes.ElementAt( loopCounter1 -1);
          }
          DevGetSequenceRef(ML_STAR, l_arrSequenceNames.ElementAt( l_intArrayPosition -1), i_seqTipSupport);
          SeqRemoveAll(t_seqTipSupport);
          SeqCopySequence(t_seqTipSupport, i_seqTipSupport);
          t_arrTipAdapters.SetAt(2-1, i_seqTipSupport);
          o_arrTipAdapters.SetAt(2-1, i_seqTipSupport);
          TrcTrace(Translate("Sequence handed over to submethod library:   "), l_arrSequenceNames.ElementAt( l_intArrayPosition -1));
        }
        l_intReturnSearchString_HT = StrFind(l_arrSequenceNames.ElementAt( loopCounter1 -1), Translate("TipSupport_HT"));
        if (l_intReturnSearchString_HT >= 0)
        {
          l_intArrayPosition = loopCounter1;
          if(0){
            l_intArrayPosition = l_arrIndexes.ElementAt( loopCounter1 -1);
          }
          DevGetSequenceRef(ML_STAR, l_arrSequenceNames.ElementAt( l_intArrayPosition -1), i_seqTipSupport);
          SeqRemoveAll(t_seqTipSupport);
          SeqCopySequence(t_seqTipSupport, i_seqTipSupport);
          t_arrTipAdapters.SetAt(3-1, i_seqTipSupport);
          o_arrTipAdapters.SetAt(3-1, i_seqTipSupport);
          TrcTrace(Translate("Sequence handed over to submethod library:   "), l_arrSequenceNames.ElementAt( l_intArrayPosition -1));
        }
      }
    }
    l_intNumberOfTipAdapters=t_arrTipAdapters.GetSize();
    TrcTrace(Translate(""), Translate(" Array of Tip Adapters"));
    {
      for(loopCounter2 = 0; loopCounter2 < l_intNumberOfTipAdapters;)
      {
        loopCounter2 = loopCounter2 + 1;
        TrcTrace(Translate("Sequence at index: "), loopCounter2);
        if(0){
          TrcTraceSequence(t_arrTipAdapters.ElementAt( loopCounter2 -1));
        }
      }
    }
    if(0){
      l_arrIndexes = HSLExtensions::Array::FindValue(l_arrSequenceNames, Translate("TipSupport"));
      l_blnTipSupportDoNotExist = HSLExtensions::Array::IsEmpty(l_arrIndexes);
      if (l_blnTipSupportDoNotExist == ASWGLOBAL::BOOL::FALSE)
      {
        l_intArrayPosition = l_arrIndexes.ElementAt( 1 -1);
        DevGetSequenceRef(ML_STAR, l_arrSequenceNames.ElementAt( l_intArrayPosition -1), i_seqTipSupport);
        SeqRemoveAll(t_seqTipSupport);
        SeqCopySequence(t_seqTipSupport, i_seqTipSupport);
        TrcTrace(Translate("Sequence handed over to submethod library:   "), l_arrSequenceNames.ElementAt( l_intArrayPosition -1));
      }
      l_arrIndexes.SetSize(0);
    }
    t_intTiptypePreloadedAtSupportBlock = 0;
    t_intTransportTool = i_intTransportTool;
    t_blnDeactivatePipettingStepsForTransportTests = i_blnDeactivatePipettingStepsForTransportTests;
    if( 0 == t_hdlProccessTimer.SetTimer(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_strCurrentDate = TimGetFormattedDate(Translate("%Y%m%d"));
    l_strCurrentTime = TimGetFormattedTime(Translate("%H%M%S"));
    t_strFullPathReportFile = StrConcat12(Translate("C:\\Program Files (x86)\\HAMILTON\\LogFiles\\"), l_strCurrentDate, Translate("_"), l_strCurrentTime, Translate("_"), Translate("NGSStarReport"), Translate("_"), i_strKitName, Translate(".xls"), Translate(""), Translate(""), Translate(""));
    o_strFullPathReportFile = t_strFullPathReportFile;
    onerror goto errLabel_16 ;
    err.Clear();
    l_hdlNGSStarReportFile.SetExtendedProperties( "HDR=NO");
    l_hdlNGSStarReportFile.AddField("Date", l_strCurrentDate, hslString, 255);
    l_hdlNGSStarReportFile.AddField("Time", l_strCurrentTime, hslString, 255);
    l_hdlNGSStarReportFile.AddField("LabID Source", l_strLabIDSource, hslString, 255);
    l_hdlNGSStarReportFile.AddField("PosID Source", l_strPosIDSource, hslString, 255);
    l_hdlNGSStarReportFile.AddField("Transfer Volume", l_strTransferVolume, hslString, 255);
    l_hdlNGSStarReportFile.AddField("LabID Target", l_strLabIDTarget, hslString, 255);
    l_hdlNGSStarReportFile.AddField("PosID Target", l_strPosIDTarget, hslString, 255);
    l_hdlNGSStarReportFile.AddField("Barcode", l_strBarcodeInformation, hslString, 255);
    l_hdlNGSStarReportFile.AddField("Transport information", l_strTranslatedTransportInformation, hslString, 255);
    l_hdlNGSStarReportFile.AddField("Aspiration information", l_strTranslatedPipettingInformationAspiration, hslString, 255);
    l_hdlNGSStarReportFile.AddField("Dispense information", l_strTranslatedPipettingInformationDispense, hslString, 255);
    if( 0 == l_hdlNGSStarReportFile.Open(t_strFullPathReportFile + " " + "RuntimeReport", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
    }
    errLabel_16 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      _DATA_IntegratedAbortHandler(Translate("NGSStarProcesses.smt "), Translate("DATA_HandoverSequencesAndDataToSMT. This smt defines : Sequences for Tips, Sequence for Transport Tool, Variable for Transport Tool and sets simulation mode for all local smts"));
    }   /* end if from skip handler if no error */
    if( 0 != l_hdlNGSStarReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlNGSStarReportFile.RemoveFields();
    t_strKitProvider = i_strKitProvider;
    t_strKitName = i_strKitName;
    t_intScheduledNumberOfHSP = 0;
    t_intScheduledNumberOfMIDI = 0;
    t_intScheduledNumberOfHamiltonComfortLid = 0;
    t_intScheduledNumberOfHVFTPerSample = 0;
    t_intScheduledNumberOfHVFTExtra = 0;
    t_intScheduledNumberOfSVFTPerSample = 0;
    t_intScheduledNumberOfSVFTExtra = 0;
    t_intScheduledNumberOfLVFTPerSample = 0;
    t_intScheduledNumberOfLVFTExtra = 0;
    t_blnReduceTip1000sequence = i_blnUseMPH;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DATA_HandoverSequencesAndDataToSMT<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_CleanUpTipAdapter( device & ML_STAR, variable i_blnStoreTipsToOriginalSequence ) void {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_CleanUpTipAdapter<<<<<<<<<<"));
    if (t_intTiptypePreloadedAtSupportBlock == 0)
    {
      MECC::TraceComment(Translate("****************************** unknown Tip Type at tip support block logic : discard all tips from tip support block to MPH96 waste ****************************** "));
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    if (t_intTiptypePreloadedAtSupportBlock == 23)
    {
      MECC::TraceComment(Translate("****************************** 50uL Tip Logic ****************************** "));
      if (i_blnStoreTipsToOriginalSequence == ASWGLOBAL::BOOL::TRUE)
      {
        onerror goto errLabel_17 ;
        err.Clear();
        STAR_MPH96_TOOLS::TIP_OFFSET_CleanUpTips_Column(ML_STAR, t_seqTips50, t_arrTipAdapters.ElementAt( 1 -1), t_strTipCounterNameTip50);
        errLabel_17 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }   /* end if from skip handler if no error */
      }
      else
      {
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    if (t_intTiptypePreloadedAtSupportBlock == 1)
    {
      MECC::TraceComment(Translate("****************************** 300uL Tip Logic ****************************** "));
      if (i_blnStoreTipsToOriginalSequence == ASWGLOBAL::BOOL::TRUE)
      {
        onerror goto errLabel_18 ;
        err.Clear();
        STAR_MPH96_TOOLS::TIP_OFFSET_CleanUpTips_Column(ML_STAR, t_seqTips300, t_arrTipAdapters.ElementAt( 2 -1), t_strTipCounterNameTip300);
        errLabel_18 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }   /* end if from skip handler if no error */
      }
      else
      {
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_CleanUpTipAdapter<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function _DATA_TranslateChannelErrorCodes( variable i_intChannelPerformedTransportOrPipetteStep, variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedPipettingInformaton ) void {
    private variable l_strMainError;
    private variable l_strSlaveError;
    private variable l_strErrorRecovery;
    private variable l_intErrorValue;
    o_strTranslatedPipettingInformaton = 0;
    l_intErrorValue = 0;
    l_strMainError = Translate("unknown error");
    l_strSlaveError = Translate("unknown error");
    l_strErrorRecovery = Translate("unknown error");
    if (i_intMainError == 0)
    {
      l_strMainError = Translate("No main error.");
    }
    if (i_intMainError == 1)
    {
      l_strMainError = Translate("Syntax error.");
    }
    if (i_intMainError == 2)
    {
      l_strMainError = Translate("Hardware error. Drive blocked, low power etc.");
    }
    if (i_intMainError == 3)
    {
      l_strMainError = Translate("Not Executed Error. There was an error in previous part command.");
    }
    if (i_intMainError == 4)
    {
      l_strMainError = Translate("Clot Error. Tip blocked.");
    }
    if (i_intMainError == 5)
    {
      l_strMainError = Translate("Barcode unreadable. Bad or missing barcode.");
    }
    if (i_intMainError == 6)
    {
      l_strMainError = Translate("Insufficient Liquid Error. Not enough liquid available.");
    }
    if (i_intMainError == 7)
    {
      l_strMainError = Translate("Tip already fitted. Repeated attempts to fit a tip or iSwap movement with tips.");
    }
    if (i_intMainError == 8)
    {
      l_strMainError = Translate("No Tip. Command was started without fitting tip. Tip was not fitted or fell off again.");
    }
    if (i_intMainError == 9)
    {
      l_strMainError = Translate("No Carrier. Load command without carrier performed.");
    }
    if (i_intMainError == 10)
    {
      l_strMainError = Translate("Not completed. Command in command buffer was aborted due to an error in a previous command, or command stack was deleted.");
    }
    if (i_intMainError == 11)
    {
      l_strMainError = Translate("Pressure LLD Error. A dispense with pressure liquid level detection is not allowed.");
    }
    if (i_intMainError == 12)
    {
      l_strMainError = Translate("No teach signal. X-Movement to LLD reached maximum allowable position without detecting teach signal.");
    }
    if (i_intMainError == 13)
    {
      l_strMainError = Translate("Loading tray error. Position already occupied.");
    }
    if (i_intMainError == 14)
    {
      l_strMainError = Translate("Pressure LLD Error. Pressure liquid level detection in a consecutive aspiration is not allowed.");
    }
    if (i_intMainError == 15)
    {
      l_strMainError = Translate("Not allowed parameter combination. I.e. pLLD and dispense or wrong X-drive assignment.");
    }
    if (i_intMainError == 16)
    {
      l_strMainError = Translate("Cover close error. Cover is not closed and couldn't be locked.");
    }
    if (i_intMainError == 17)
    {
      l_strMainError = Translate("Improper Aspiration or Dispense Error. The pressure-based aspiration / dispensation control reported an error ( not enough liquid ).");
    }
    if (i_intMainError == 18)
    {
      l_strMainError = Translate("Wash fluid or waste error. Missing wash fluid OR waste of particular washer is full.");
    }
    if (i_intMainError == 19)
    {
      l_strMainError = Translate("Incubation error. Incubator temperature out of limit.");
    }
    if (i_intMainError == 20)
    {
      l_strMainError = Translate("TADM overshot. Overshot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 21)
    {
      l_strMainError = Translate("No element. Expected element not detected.");
    }
    if (i_intMainError == 22)
    {
      l_strMainError = Translate("Element still holding. Get command is sent twice or element is not discarded.");
    }
    if (i_intMainError == 23)
    {
      l_strMainError = Translate("Element lost. Expected element is missing or lost.");
    }
    if (i_intMainError == 24)
    {
      l_strMainError = Translate("Illegal target plate position. Over or underflow of iSWAP positions OR iSWAP is not in park position during pipetting activities.");
    }
    if (i_intMainError == 25)
    {
      l_strMainError = Translate("Illegal user access. Carrier was manually removed or cover is open (immediate stop is executed).");
    }
    if (i_intMainError == 26)
    {
      l_strMainError = Translate("TADM undershot. Undershot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 27)
    {
      l_strMainError = Translate("Position Error. The position is out of range.");
    }
    if (i_intMainError == 28)
    {
      l_strMainError = Translate("Unexpected cLLD Error. The cLLD detected a liquid level above start height of liquid level search.");
    }
    if (i_intMainError == 29)
    {
      l_strMainError = Translate("Area already occupied. Its impossible to occupy area because this area is already in use.");
    }
    if (i_intMainError == 30)
    {
      l_strMainError = Translate("Impossible to occupy area. Area can't be occupied because is no solution for arm prepositioning.");
    }
    if (i_intMainError == 31)
    {
      l_strMainError = Translate("Anti drop control error. Anti drop controlling out of tolerance.");
    }
    if (i_intMainError == 32)
    {
      l_strMainError = Translate("Parameter out of range.");
    }
    if (i_intMainError == 33)
    {
      l_strMainError = Translate("Parameter does not belong to command, or not all parameters were sent.");
    }
    if (i_intMainError == 34)
    {
      l_strMainError = Translate("Node name unknown.");
    }
    if (i_intMainError == 35)
    {
      l_strMainError = Translate("ID parameter error.");
    }
    if (i_intMainError == 37)
    {
      l_strMainError = Translate("Node name defined twice.");
    }
    if (i_intMainError == 38)
    {
      l_strMainError = Translate("Faulty XL channel settings.");
    }
    if (i_intMainError == 39)
    {
      l_strMainError = Translate("Faulty robotic channel settings.");
    }
    if (i_intMainError == 40)
    {
      l_strMainError = Translate("PIP task busy.");
    }
    if (i_intMainError == 41)
    {
      l_strMainError = Translate("Auto load task busy.");
    }
    if (i_intMainError == 42)
    {
      l_strMainError = Translate("Miscellaneous task busy.");
    }
    if (i_intMainError == 43)
    {
      l_strMainError = Translate("Incubator task busy.");
    }
    if (i_intMainError == 44)
    {
      l_strMainError = Translate("Washer task busy.");
    }
    if (i_intMainError == 45)
    {
      l_strMainError = Translate("iSWAP task busy.");
    }
    if (i_intMainError == 46)
    {
      l_strMainError = Translate("CoRe 96 head task busy.");
    }
    if (i_intMainError == 47)
    {
      l_strMainError = Translate("Carrier sensor doesn't work properly.");
    }
    if (i_intMainError == 48)
    {
      l_strMainError = Translate("CoRe 384 head task busy.");
    }
    if (i_intMainError == 49)
    {
      l_strMainError = Translate("Nano pipettor task busy.");
    }
    if (i_intMainError == 50)
    {
      l_strMainError = Translate("XL channel task busy.");
    }
    if (i_intMainError == 51)
    {
      l_strMainError = Translate("Tube gripper task busy.");
    }
    if (i_intMainError == 52)
    {
      l_strMainError = Translate("Imaging channel task busy.");
    }
    if (i_intMainError == 53)
    {
      l_strMainError = Translate("Robotic channel task busy.");
    }
    if (i_intMainError == 99)
    {
      l_strMainError = Translate("Slave Error. This error code indicates an error in one of the slaves.");
    }
    if (i_intMainError == 102)
    {
      l_strMainError = Translate("Liquid Level Error. Liquid surface not detected.");
    }
    if (i_intMainError == 104)
    {
      l_strMainError = Translate("Not Aspirated Error. Dispense volume exceeds the aspirated volume.");
    }
    if (i_intMainError == 105)
    {
      l_strMainError = Translate("Improper Dispensation Error. The dispensed volume is out of tolerance (may only occur for Nano Pipettor Dispense steps).");
    }
    if (i_intSlaveError == 0)
    {
      l_strSlaveError = Translate("No slave error.");
    }
    if (i_intSlaveError == 20)
    {
      l_strSlaveError = Translate("No I²C Bus or EEPROM not working. Transfer check error. No communication to EEPROM.");
    }
    if (i_intSlaveError == 30)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined command.");
    }
    if (i_intSlaveError == 31)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined parameter.");
    }
    if (i_intSlaveError == 32)
    {
      l_strSlaveError = Translate("Syntax check error. Parameter out of range.");
    }
    if (i_intSlaveError == 35)
    {
      l_strSlaveError = Translate("General error during execution of commands. Voltages outside permitted range.");
    }
    if (i_intSlaveError == 36)
    {
      l_strSlaveError = Translate("General error during execution of commands. Stop during execution of a command.");
    }
    if (i_intSlaveError == 37)
    {
      l_strSlaveError = Translate("General error during execution of commands. Movement interrupted. 2nd CORE gripper pipetting channel has a step loss.");
    }
    if (i_intSlaveError == 40)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process.");
    }
    if (i_intSlaveError == 50)
    {
      l_strSlaveError = Translate("Dispensing drive - Init position not found.");
    }
    if (i_intSlaveError == 51)
    {
      l_strSlaveError = Translate("Dispensing drive - Drive not initialized.");
    }
    if (i_intSlaveError == 52)
    {
      l_strSlaveError = Translate("Dispensing drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 53)
    {
      l_strSlaveError = Translate("Dispensing drive - Step monitoring. Maximum volume in tip reached.");
    }
    if (i_intSlaveError == 54)
    {
      l_strSlaveError = Translate("Dispensing drive - Position monitoring. Position out of permitted area.");
    }
    if (i_intSlaveError == 55)
    {
      l_strSlaveError = Translate("Y-drive - drive blocked.");
    }
    if (i_intSlaveError == 56)
    {
      l_strSlaveError = Translate("Y-drive - drive not initialized.");
    }
    if (i_intSlaveError == 57)
    {
      l_strSlaveError = Translate("Y-drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 60)
    {
      l_strSlaveError = Translate("Z-drive - drive blocked.");
    }
    if (i_intSlaveError == 61)
    {
      l_strSlaveError = Translate("Z-drive - drive not initialized.");
    }
    if (i_intSlaveError == 62)
    {
      l_strSlaveError = Translate("Z-drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 65)
    {
      l_strSlaveError = Translate("Squeezer -drive - drive blocked.");
    }
    if (i_intSlaveError == 66)
    {
      l_strSlaveError = Translate("Squeezer -drive - drive not initialized.");
    }
    if (i_intSlaveError == 67)
    {
      l_strSlaveError = Translate("Squeezer -drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 68)
    {
      l_strSlaveError = Translate("Squeezer -drive - Init position adjustment error.");
    }
    if (i_intSlaveError == 70)
    {
      l_strSlaveError = Translate("Liquid level detection - No liquid level found.");
    }
    if (i_intSlaveError == 71)
    {
      l_strSlaveError = Translate("Liquid level detection - Not enough liquid present.");
    }
    if (i_intSlaveError == 72)
    {
      l_strSlaveError = Translate("Liquid level detection - Auto calibration at pressure sensor not possible.");
    }
    if (i_intSlaveError == 73)
    {
      l_strSlaveError = Translate("Liquid level detection - No liquid level found with dual LLD.");
    }
    if (i_intSlaveError == 74)
    {
      l_strSlaveError = Translate("Liquid level detection - Liquid at a not allowed position detected.");
    }
    if (i_intSlaveError == 80)
    {
      l_strSlaveError = Translate("Liquid handling - Liquid not correctly aspirated.");
    }
    if (i_intSlaveError == 81)
    {
      l_strSlaveError = Translate("Liquid handling - Clot detected.");
    }
    if (i_intSlaveError == 82)
    {
      l_strSlaveError = Translate("Liquid handling - TADM measurement out of lower limit curve.");
    }
    if (i_intSlaveError == 83)
    {
      l_strSlaveError = Translate("Liquid handling - TADM measurement out of upper limit curve.");
    }
    if (i_intSlaveError == 84)
    {
      l_strSlaveError = Translate("Liquid handling - Not enough memory for TADM measurement.");
    }
    if (i_intSlaveError == 85)
    {
      l_strSlaveError = Translate("Liquid handling - No communication to digital potentiometer.");
    }
    if (i_intSlaveError == 86)
    {
      l_strSlaveError = Translate("Liquid handling - ADC algorithm error.");
    }
    if (i_intSlaveError == 87)
    {
      l_strSlaveError = Translate("Liquid handling - 2nd phase of liquid not found.");
    }
    if (i_intSlaveError == 88)
    {
      l_strSlaveError = Translate("Liquid handling - Not enough 2nd phase of liquid present. Immersion depth or surface following position below minimal access range.");
    }
    if (i_intSlaveError == 90)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve not resetable.");
    }
    if (i_intSlaveError == 91)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve not programable.");
    }
    if (i_intSlaveError == 92)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve name not found.");
    }
    if (i_intSlaveError == 93)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve data incorrect.");
    }
    if (i_intSlaveError == 94)
    {
      l_strSlaveError = Translate("TADM limit curve - not enough memory for limit curve.");
    }
    if (i_intSlaveError == 95)
    {
      l_strSlaveError = Translate("TADM limit curve - not allowed limit curve index.");
    }
    if (i_intSlaveError == 96)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve already stored.");
    }
    if (i_intSlaveError == 99)
    {
      l_strSlaveError = Translate("Pipetting head error - Return mesage of the command CH includes a pipetting head error.");
    }
    if (i_intErrorRecovery == 0)
    {
      l_strErrorRecovery = Translate("No recovery.");
    }
    if (i_intErrorRecovery == 1)
    {
      l_strErrorRecovery = Translate("Abort - Run aborted.");
    }
    if (i_intErrorRecovery == 2)
    {
      l_strErrorRecovery = Translate("Cancel - run canceled or user defined errorhandling  was executed.");
    }
    if (i_intErrorRecovery == 3)
    {
      l_strErrorRecovery = Translate("Initialize. Instrument initialized again.");
    }
    if (i_intErrorRecovery == 4)
    {
      l_strErrorRecovery = Translate("Repeat. Command repeated.");
    }
    if (i_intErrorRecovery == 5)
    {
      l_strErrorRecovery = Translate("Exclude. Channel or position excluded until next tip pick up.");
    }
    if (i_intErrorRecovery == 6)
    {
      l_strErrorRecovery = Translate("Waste. Tip ejected to the default waste.");
    }
    if (i_intErrorRecovery == 7)
    {
      l_strErrorRecovery = Translate("Air. Rest of missing volume filled up with air.");
    }
    if (i_intErrorRecovery == 8)
    {
      l_strErrorRecovery = Translate("Bottom. Aspiration repeated on container bottom.");
    }
    if (i_intErrorRecovery == 9)
    {
      l_strErrorRecovery = Translate("Continue. Run continued without any change.");
    }
    if (i_intErrorRecovery == 10)
    {
      l_strErrorRecovery = Translate("Barcode. Barcode assigned manually.");
    }
    if (i_intErrorRecovery == 11)
    {
      l_strErrorRecovery = Translate("Next. Command repeated on next sequence position.");
    }
    if (i_intErrorRecovery == 12)
    {
      l_strErrorRecovery = Translate("Available. Available volume used.");
    }
    if (l_strMainError == "unknown error")
    {
      l_strMainError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strSlaveError == "unknown error")
    {
      l_strSlaveError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strErrorRecovery == "unknown error")
    {
      l_strErrorRecovery = Translate(" error not translated by library - check log file to retrieve data");
    }
    l_strMainError = StrConcat4(l_strMainError, Translate(" - code : "), i_intMainError, Translate(""));
    l_strSlaveError = StrConcat4(l_strSlaveError, Translate(" - code : "), i_intSlaveError, Translate(""));
    l_strErrorRecovery = StrConcat4(l_strErrorRecovery, Translate(" - code : "), i_intErrorRecovery, Translate(""));
    l_intErrorValue = l_intErrorValue + i_intMainError;
    l_intErrorValue = l_intErrorValue + i_intSlaveError;
    l_intErrorValue = l_intErrorValue + i_intErrorRecovery;
    if (l_intErrorValue == 0)
    {
      if (i_intChannelPerformedTransportOrPipetteStep == 1)
      {
        o_strTranslatedPipettingInformaton = Translate("pipetting step ok.");
      }
      if (i_intChannelPerformedTransportOrPipetteStep == 2)
      {
        o_strTranslatedPipettingInformaton = Translate("transport step ok.");
      }
    }
    else
    {
      o_strTranslatedPipettingInformaton = StrConcat8(l_strMainError, Translate(" ; "), l_strSlaveError, Translate(" ; "), l_strErrorRecovery, Translate(""), Translate(""), Translate(""));
      Trace ("Main error : ", i_intMainError, " +++ Slave error : ", i_intSlaveError, " +++ Recovery button : ", i_intErrorRecovery);
    }
  }

  function Process_CleanUp_MPH( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, sequence & i_seqPositionHHS, sequence & i_seqAspirationPositionEthanol, sequence & i_seqMagneticStandPosition, sequence & i_seqLiquidWaste, sequence & i_seqAspirationPositionResuspensionBuffer, variable i_fltVolumeEthanol, variable i_fltVolumeBeads, variable i_fltVolumeResuspensionBuffer, variable i_fltVolumeSupernatantToWaste, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMixing, variable i_strLiquidClassEthanol, variable i_strLiquidClassResuspensionBuffer, variable i_strLiquidClassSupernatantToWasteMPH, variable i_strLiquidClassEthanolToWasteMPH, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerDurationResuspendCleanedLibrary, variable i_intShakerDevice, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver, variable i_intInputNumberOfSamples ) void {
    private sequence l_arrSequenceBatchProcessingCleanUp[];
    private variable l_intBatchCounter;
    private variable l_strBatchInformation;
    private variable l_intNumberOfCalculatedBatchesToBeProcessed;
    private variable l_strReadCurrentBarcode;
    private sequence l_seqCurrentIntermediateBatch;
    private timer l_hdlOverdryingTimerAirDryingEthanol;
    private timer l_hdlTimerIncubationAfterResuspendation;
    private timer l_hdlTimerIncubationAvoidingBeadCarryOverAtMagneticStand;
    private variable i_blnActivateBatchProcessForScaleUp;
    private variable i_intNumberOfColumnsWithinOneBatch;
    private timer l_hdlTimerIncubationAtMagent;
    private timer l_hldTimerIncubationAfterShakingAtHeaterShaker;
    private variable l_strLabwareIDAspiration;
    private variable l_strTypeOfLabware;
    private variable l_blnActivateIncrementSequence;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Process_CleanUp_MPH<<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    DATA_UpdateInformationIntoReportFile(Translate("Process clean up"), ASWGLOBAL::BOOL::TRUE);
    i_blnActivateBatchProcessForScaleUp = ASWGLOBAL::BOOL::TRUE;
    i_intNumberOfColumnsWithinOneBatch = 12;
    _DATA_CalculateAndDefineBatchProcessCleanUp(i_intNumberOfColumnsWithinOneBatch, i_blnActivateBatchProcessForScaleUp, i_seqMagneticStandPosition, l_arrSequenceBatchProcessingCleanUp, l_intNumberOfCalculatedBatchesToBeProcessed);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      l_strLabwareIDAspiration = SeqGetLabwareId(i_seqAspirationPositionBeads);
      _DATA_InterpreteLabwareID(l_strLabwareIDAspiration, l_strTypeOfLabware);
      if (l_strTypeOfLabware == "tube")
      {
        l_blnActivateIncrementSequence = ASWGLOBAL::BOOL::TRUE;
      }
      if (l_strTypeOfLabware == "trough")
      {
        l_blnActivateIncrementSequence = ASWGLOBAL::BOOL::FALSE;
      }
      PIP_MixOnly(ML_STAR, i_seqMixPositionBeads, 0, i_strLiquidClassBeadsMixing, 10, 0);
      PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionBeads, i_seqPositionHHS, i_fltVolumeBeads, i_strLiquidClassBeads, 0, 0, 0, 0, 1, ASWGLOBAL::BOOL::TRUE, l_blnActivateIncrementSequence, ASWGLOBAL::BOOL::FALSE);
    }
    _HHS_Shake(i_intShakerDevice, i_intShakerRPMBeadSampleMixing, i_intShakerDurationBeadSampleMixing);
    DATA_IncubationTimer(l_hldTimerIncubationAfterShakingAtHeaterShaker, i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, 1);
    Trp_MIDI(ML_STAR, i_seqPositionHHS, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    DATA_IncubationTimer(l_hdlTimerIncubationAtMagent, i_intTimeForSeparationAtMagneticStand, 1);
    SeqRemoveAll(l_seqCurrentIntermediateBatch);
    {
      for(l_intBatchCounter = 0; l_intBatchCounter < l_intNumberOfCalculatedBatchesToBeProcessed;)
      {
        l_intBatchCounter = l_intBatchCounter + 1;
        l_seqCurrentIntermediateBatch=l_arrSequenceBatchProcessingCleanUp.GetAt(l_intBatchCounter-1);
        AlignSequences(hslTrue, l_seqCurrentIntermediateBatch, 1, i_seqMagneticStandPosition, 1);
        l_seqCurrentIntermediateBatch.SetCurrentPosition(1);
        if(0){
          TrcTraceSequence(l_seqCurrentIntermediateBatch);
        }
        l_strBatchInformation = StrConcat4(Translate("...batch "), l_intBatchCounter, Translate(" of "), l_intNumberOfCalculatedBatchesToBeProcessed);
        VectorCustomDialogs::AppendStatusText(l_strBatchInformation);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_MPH_Supernatant_SVFT_SingleDispenseFromPlateToWaste(ML_STAR, l_seqCurrentIntermediateBatch, i_fltVolumeSupernatantToWaste, i_strLiquidClassSupernatantToWasteMPH, i_intInputNumberOfSamples);
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          _PIP_MultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPositionEthanol, l_seqCurrentIntermediateBatch, i_fltVolumeEthanol, i_strLiquidClassEthanol, 6);
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_MPH_Supernatant_SVFT_SingleDispenseFromPlateToWaste(ML_STAR, l_seqCurrentIntermediateBatch, 210, i_strLiquidClassSupernatantToWasteMPH, i_intInputNumberOfSamples);
        }
        DATA_IncubationTimer(l_hdlOverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, 2);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          _PIP_MultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPositionEthanol, l_seqCurrentIntermediateBatch, i_fltVolumeEthanol, i_strLiquidClassEthanol, 6);
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_MPH_Supernatant_SVFT_SingleDispenseFromPlateToWaste(ML_STAR, l_seqCurrentIntermediateBatch, 210, i_strLiquidClassEthanolToWasteMPH, i_intInputNumberOfSamples);
        }
        VectorCustomDialogs::AppendStatusText(Translate("Incubation bead air drying at magnetic stand"));
        l_seqCurrentIntermediateBatch.SetCurrentPosition(1);
        DATA_IncubationTimer(l_hdlOverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, 3);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionResuspensionBuffer, l_seqCurrentIntermediateBatch, i_fltVolumeResuspensionBuffer, i_strLiquidClassResuspensionBuffer, 0, 0, 0, 0, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    Trp_MIDI(ML_STAR, i_seqMagneticStandPosition, i_seqPositionHHS, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    _HHS_Shake(i_intShakerDevice, i_intShakerRPMResuspendCleanedLibrary, i_intShakerDurationResuspendCleanedLibrary);
    _HHS_Shake(i_intShakerDevice, 800, 10);
    DATA_IncubationTimer(l_hdlTimerIncubationAfterResuspendation, i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, 1);
    Trp_MIDI(ML_STAR, i_seqPositionHHS, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    DATA_IncubationTimer(l_hdlTimerIncubationAvoidingBeadCarryOverAtMagneticStand, i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver, 1);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Process_CleanUp_MPH<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function Process_SizeSelection_MPH( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, sequence & i_seqLiquidWaste, sequence & i_seqPositionHHS, sequence & i_seqTransferPositionNewMidiPlate, sequence & i_seqAspirationPositionEthanol, sequence & i_seqAspirationPositionResuspensionBuffer, sequence & i_seqMagneticStandPosition, sequence & i_trpPositionMIDIWaste, variable i_strLiquidClassSupernatantToWasteMPH, variable i_strLiquidClassResuspensionBuffer, variable i_strLiquidClassEthanol, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMPH, variable i_strLiquidClassBeadsMixing, variable i_fltVolumeTransferSupernatantDuringSizeSelection, variable i_fltVolumeEthanol, variable i_fltVolumeBeadsFirstSeparation, variable i_fltVolumeBeadsSecondSeparation, variable i_fltVolumeResuspensionBuffer, variable i_intShakerDevice, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationResuspendCleanedLibrary, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver, variable i_intInputNumberOfSamples ) void {
    private sequence l_arrSequenceBatchProcessingCleanUp[];
    private variable l_intBatchCounter;
    private variable l_strBatchInformation;
    private variable l_intLoopCounterSizeSelectionCycle;
    private variable l_strConcatMessageASWStatusWindow;
    private variable l_intNumberOfCalculatedBatchesToBeProcessed;
    private variable l_strReadCurrentBarcode;
    private timer l_hdlOverdryingTimerAirDryingEthanol;
    private timer l_hdlTimerIncubationAfterResuspendation;
    private timer l_hdlTimerIncubationAvoidingBeadCarryOverAtMagneticStand;
    private sequence l_seqCurrentIntermediateBatch;
    private variable i_blnActivateBatchProcessForScaleUp;
    private variable i_intNumberOfColumnsWithinOneBatch;
    private timer l_hdlTimerIncubationAtMagent;
    private timer l_hldTimerIncubationAfterShakingAtHeaterShaker;
    private variable l_strLabwareIDAspiration;
    private variable l_strTypeOfLabware;
    private variable l_blnActivateIncrementSequence;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Process_SizeSelection_MPH<<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    DATA_UpdateInformationIntoReportFile(Translate("Process size selection MPH..."), ASWGLOBAL::BOOL::TRUE);
    i_blnActivateBatchProcessForScaleUp = ASWGLOBAL::BOOL::TRUE;
    i_intNumberOfColumnsWithinOneBatch = 12;
    _DATA_CalculateAndDefineBatchProcessCleanUp(i_intNumberOfColumnsWithinOneBatch, i_blnActivateBatchProcessForScaleUp, i_seqMagneticStandPosition, l_arrSequenceBatchProcessingCleanUp, l_intNumberOfCalculatedBatchesToBeProcessed);
    {
      for(l_intLoopCounterSizeSelectionCycle = 0; l_intLoopCounterSizeSelectionCycle < 2;)
      {
        l_intLoopCounterSizeSelectionCycle = l_intLoopCounterSizeSelectionCycle + 1;
        l_strConcatMessageASWStatusWindow = StrConcat2(Translate("... magnetic size selection cycle number "), l_intLoopCounterSizeSelectionCycle);
        VectorCustomDialogs::AppendStatusText(l_strConcatMessageASWStatusWindow);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          l_strLabwareIDAspiration = SeqGetLabwareId(i_seqAspirationPositionBeads);
          _DATA_InterpreteLabwareID(l_strLabwareIDAspiration, l_strTypeOfLabware);
          if (l_strTypeOfLabware == "tube")
          {
            l_blnActivateIncrementSequence = ASWGLOBAL::BOOL::TRUE;
          }
          if (l_strTypeOfLabware == "trough")
          {
            l_blnActivateIncrementSequence = ASWGLOBAL::BOOL::FALSE;
          }
          PIP_MixOnly(ML_STAR, i_seqMixPositionBeads, 0, i_strLiquidClassBeadsMixing, 10, 0);
          if (l_intLoopCounterSizeSelectionCycle == 1)
          {
            PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionBeads, i_seqPositionHHS, i_fltVolumeBeadsFirstSeparation, i_strLiquidClassBeads, 0, 0, 0, 0, 1, ASWGLOBAL::BOOL::TRUE, l_blnActivateIncrementSequence, ASWGLOBAL::BOOL::FALSE);
          }
          else
          {
            PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionBeads, i_seqPositionHHS, i_fltVolumeBeadsSecondSeparation, i_strLiquidClassBeads, 0, 0, 0, 0, 1, ASWGLOBAL::BOOL::TRUE, l_blnActivateIncrementSequence, ASWGLOBAL::BOOL::FALSE);
          }
        }
        _HHS_Shake(i_intShakerDevice, i_intShakerRPMBeadSampleMixing, i_intShakerDurationBeadSampleMixing);
        DATA_IncubationTimer(l_hldTimerIncubationAfterShakingAtHeaterShaker, i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, 1);
        Trp_MIDI(ML_STAR, i_seqPositionHHS, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
        DATA_IncubationTimer(l_hdlTimerIncubationAtMagent, i_intTimeForSeparationAtMagneticStand, 1);
        if (l_intLoopCounterSizeSelectionCycle == 1)
        {
          if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
          {
            PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, i_seqMagneticStandPosition, i_seqTransferPositionNewMidiPlate, i_fltVolumeTransferSupernatantDuringSizeSelection, i_strLiquidClassBeadsMPH, i_intInputNumberOfSamples, 0, 0, 0, 1, 1);
            Trp_MIDI(ML_STAR, i_seqMagneticStandPosition, i_trpPositionMIDIWaste, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
            Trp_MIDI(ML_STAR, i_seqTransferPositionNewMidiPlate, i_seqPositionHHS, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
          }
        }
      }
    }
    SeqRemoveAll(l_seqCurrentIntermediateBatch);
    {
      for(l_intBatchCounter = 0; l_intBatchCounter < l_intNumberOfCalculatedBatchesToBeProcessed;)
      {
        l_intBatchCounter = l_intBatchCounter + 1;
        l_seqCurrentIntermediateBatch=l_arrSequenceBatchProcessingCleanUp.GetAt(l_intBatchCounter-1);
        AlignSequences(hslTrue, l_seqCurrentIntermediateBatch, 1, i_seqMagneticStandPosition, 1);
        l_seqCurrentIntermediateBatch.SetCurrentPosition(1);
        if(0){
          TrcTraceSequence(l_seqCurrentIntermediateBatch);
        }
        l_strBatchInformation = StrConcat4(Translate("...batch "), l_intBatchCounter, Translate(" of "), l_intNumberOfCalculatedBatchesToBeProcessed);
        VectorCustomDialogs::AppendStatusText(l_strBatchInformation);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_MPH_Supernatant_SVFT_SingleDispenseFromPlateToWaste(ML_STAR, l_seqCurrentIntermediateBatch, 250, i_strLiquidClassSupernatantToWasteMPH, i_intInputNumberOfSamples);
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          _PIP_MultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPositionEthanol, l_seqCurrentIntermediateBatch, i_fltVolumeEthanol, i_strLiquidClassEthanol, 6);
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_MPH_Supernatant_SVFT_SingleDispenseFromPlateToWaste(ML_STAR, l_seqCurrentIntermediateBatch, 210, i_strLiquidClassSupernatantToWasteMPH, i_intInputNumberOfSamples);
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          _PIP_MultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPositionEthanol, l_seqCurrentIntermediateBatch, i_fltVolumeEthanol, i_strLiquidClassEthanol, 6);
        }
        DATA_IncubationTimer(l_hdlOverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, 2);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_MPH_Supernatant_SVFT_SingleDispenseFromPlateToWaste(ML_STAR, l_seqCurrentIntermediateBatch, 210, i_strLiquidClassSupernatantToWasteMPH, i_intInputNumberOfSamples);
        }
        VectorCustomDialogs::AppendStatusText(Translate("Incubation bead air drying at magnetic stand"));
        l_seqCurrentIntermediateBatch.SetCurrentPosition(1);
        DATA_IncubationTimer(l_hdlOverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, 3);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionResuspensionBuffer, l_seqCurrentIntermediateBatch, i_fltVolumeResuspensionBuffer, i_strLiquidClassResuspensionBuffer, 0, 0, 0, 0, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    Trp_MIDI(ML_STAR, i_seqMagneticStandPosition, i_seqPositionHHS, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    _HHS_Shake(i_intShakerDevice, i_intShakerRPMResuspendCleanedLibrary, i_intShakerDurationResuspendCleanedLibrary);
    _HHS_Shake(i_intShakerDevice, 800, 10);
    DATA_IncubationTimer(l_hdlTimerIncubationAfterResuspendation, i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, 1);
    Trp_MIDI(ML_STAR, i_seqPositionHHS, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    DATA_IncubationTimer(l_hdlTimerIncubationAvoidingBeadCarryOverAtMagneticStand, i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver, 1);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: Process_SizeSelection_MPH<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_CheckForSufficientVolumeIn50mlTroughs( device & ML_STAR, variable & i_arr_strReagentNames[], variable & i_arr_fltReagentVolumes[], sequence & i_arr_seqAspirateReagents[], variable & o_bln_RefillContainers ) void {
    private variable l_int_NumberOfContainers;
    private variable l_fltVolumeDetectedCurrentChannel;
    private variable l_fltVolumeDetected;
    private variable loopCounter9;
    private variable l_flt_randomValue;
    private variable l_intNumberOfLowVolumeRecords;
    private variable l_fltVolumeRequested;
    private variable loopCounter10;
    private variable l_str_LowVolumeReagentDetected;
    private variable l_flt_ExtraVolumeNeeded;
    private variable l_intReturnDisplayDialog;
    private variable l_str_ReagentName;
    private variable l_int_NumberOfChannels;
    private variable l_arr_fltMeasuredVolumesByChannel_ul[];
    private variable l_arr_intTroughNumber[];
    private variable l_arr_DialogCol1[];
    private variable l_arr_strLowVolumesMeasured_ml[];
    private variable l_arr_DialogCol2[];
    private variable l_arr_DialogCol3[];
    private variable l_strInformationToBeUpdated;
    private sequence l_arr_seqRGTAspirate_temp[];
    private variable l_int_NumberOfContainersPerSequence;
    private variable l_int_NumberOfSequences;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable loopCounter3;
    private sequence l_seqRGT_temp;
    private variable l_arr_strReagentNames[];
    private variable l_temp_arr_LabwareIds[];
    private variable l_arr_LabwareIds[];
    private variable l_arr_fltReagentVolumes[];
    private variable l_arr_strColumnHeadersDialog[];
    private variable l_intNumberOfLoops;
    private variable l_strFullpathLoadingPicture;
    private variable l_strLoopCounter3;
    private variable l_intCurrentContainer;
    o_bln_RefillContainers = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_CheckForSufficientVolumeIn50mlTroughs<<<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    l_strInformationToBeUpdated = StrConcat8(Translate("Measure volume of reagents at 50ml troughs."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    o_bln_RefillContainers = ASWGLOBAL::BOOL::FALSE;
    l_int_NumberOfChannels = t_intNumberOfAllAvailableChannels;
    l_arr_seqRGTAspirate_temp.SetSize(0);
    l_int_NumberOfSequences=i_arr_seqAspirateReagents.GetSize();
    l_arr_LabwareIds.SetSize(0);
    l_arr_strReagentNames.SetSize(0);
    l_arr_fltReagentVolumes.SetSize(0);
    l_intCurrentContainer = 0;
    SeqRemoveAll(l_seqRGT_temp);
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfSequences;)
      {
        loopCounter1 = loopCounter1 + 1;
        MECC::TraceComment(Translate("¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨\n"));
        Trace ("Number of sequences to be analyzed : ",l_int_NumberOfSequences, ". Current sequence number : ",loopCounter1);
        SeqGetLabwareIds(i_arr_seqAspirateReagents.ElementAt( loopCounter1 -1), l_temp_arr_LabwareIds);
        l_int_NumberOfContainersPerSequence=l_temp_arr_LabwareIds.GetSize();
        {
          for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfContainersPerSequence;)
          {
            loopCounter2 = loopCounter2 + 1;
            MECC::TraceComment(Translate("\n"));
            l_intCurrentContainer = l_intCurrentContainer + 1;
            Trace ("Number of troughs per sequence : ",l_int_NumberOfContainersPerSequence, ". Current trough number within the sequence : ",loopCounter2);
            l_arr_strReagentNames.AddAsLast(i_arr_strReagentNames.ElementAt( l_intCurrentContainer -1));
            l_arr_fltReagentVolumes.AddAsLast(i_arr_fltReagentVolumes.ElementAt( l_intCurrentContainer -1));
            l_arr_LabwareIds.AddAsLast(l_temp_arr_LabwareIds.ElementAt( loopCounter2 -1));
            if (t_blnClinicalNGSStarlet == ASWGLOBAL::BOOL::TRUE)
            {
              l_intNumberOfLoops = 4;
            }
            else
            {
              l_intNumberOfLoops = 8;
            }
            {
              for(loopCounter3 = 0; loopCounter3 < l_intNumberOfLoops;)
              {
                loopCounter3 = loopCounter3 + 1;
                l_strLoopCounter3 = StrIStr(loopCounter3);
                Trace("l_strLoopCounter3 : ",l_strLoopCounter3);
                SeqAdd(l_seqRGT_temp, l_temp_arr_LabwareIds.ElementAt( loopCounter2 -1), l_strLoopCounter3);
              }
            }
            l_seqRGT_temp.SetCurrentPosition(1);
            l_arr_seqRGTAspirate_temp.AddAsLast(l_seqRGT_temp);
            SeqRemoveAll(l_seqRGT_temp);
          }
        }
        MECC::TraceComment(Translate("\n¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨"));
      }
    }
    l_int_NumberOfContainers = l_intCurrentContainer;
    l_arr_fltMeasuredVolumesByChannel_ul.SetSize(0);
    l_arr_intTroughNumber.SetSize(0);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
    {
      {
        for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfContainers;)
        {
          loopCounter1 = loopCounter1 + 1;
          l_flt_randomValue = 50000;
          {
            loopCounter9 = 0;
            while (l_flt_randomValue > 40000)
            {
              loopCounter9 = loopCounter9 + 1;
              l_flt_randomValue = MthR01Draw();
              l_flt_randomValue = l_flt_randomValue * 100000;
            }
          }
          l_flt_randomValue = MthFloor(l_flt_randomValue);
          l_fltVolumeDetectedCurrentChannel = l_flt_randomValue;
          l_arr_fltMeasuredVolumesByChannel_ul.AddAsLast(l_fltVolumeDetectedCurrentChannel);
        }
      }
    }
    else
    {
      STAR_CHANNEL_TOOLS::LIQUID_LEVEL_MeasureLiquidMulti(ML_STAR, l_arr_seqRGTAspirate_temp, t_seqTips300, ML_STAR.Waste08, t_strTipCounterNameTip300, 1, ASWGLOBAL::BOOL::TRUE, l_arr_fltMeasuredVolumesByChannel_ul);
      DATA_TipCounterWrite(ML_STAR);
    }
    Util2::Debug::TraceArray(Translate(" l_arr_fltMeasuredVolumesByChannel_ul: "), l_arr_fltMeasuredVolumesByChannel_ul);
    MECC::TraceComment(Translate("Compare detected volumes with expected volumes"));
    l_int_NumberOfContainers=l_arr_seqRGTAspirate_temp.GetSize();
    l_arr_strLowVolumesMeasured_ml.SetSize(0);
    {
      for(loopCounter10 = 0; loopCounter10 < l_int_NumberOfContainers;)
      {
        loopCounter10 = loopCounter10 + 1;
        l_str_ReagentName=l_arr_strReagentNames.GetAt(loopCounter10-1);
        l_fltVolumeRequested=l_arr_fltReagentVolumes.GetAt(loopCounter10-1);
        l_fltVolumeDetected=l_arr_fltMeasuredVolumesByChannel_ul.GetAt(loopCounter10-1);
        if (l_fltVolumeDetected < l_fltVolumeRequested)
        {
          l_flt_ExtraVolumeNeeded = l_fltVolumeRequested - l_fltVolumeDetected;
          MECC::TraceComment(Translate("<19/06/2020 Enrique Bayo:\nError detected: Channels tend to detect less volume than the actual volume. To prevent from from consecutive wrong measures, an extra 500 uL has been added to the \"Volume needed\" variable\n\nAdded  extra 500 uL to \"Volume needed\">\n"));
          l_flt_ExtraVolumeNeeded = l_flt_ExtraVolumeNeeded + 500;
          l_flt_ExtraVolumeNeeded = l_flt_ExtraVolumeNeeded / (1000 * 1.0);
          l_flt_ExtraVolumeNeeded = MthCeiling(l_flt_ExtraVolumeNeeded);
          l_str_LowVolumeReagentDetected = StrConcat12(Translate("Reagent: "), l_str_ReagentName, Translate(" in container: "), loopCounter10, Translate(" requires extra: "), l_flt_ExtraVolumeNeeded, Translate(" mL"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          l_arr_strLowVolumesMeasured_ml.AddAsLast(l_str_LowVolumeReagentDetected);
          l_arr_DialogCol2.AddAsLast(Translate(""));
          l_arr_DialogCol3.AddAsLast(Translate(""));
        }
      }
    }
    l_arr_DialogCol1=l_arr_strLowVolumesMeasured_ml;
    l_intNumberOfLowVolumeRecords=l_arr_strLowVolumesMeasured_ml.GetSize();
    if (l_intNumberOfLowVolumeRecords > 0)
    {
      l_arr_strColumnHeadersDialog.SetSize(0);
      l_arr_strColumnHeadersDialog.AddAsLast(Translate(""));
      l_arr_strColumnHeadersDialog.AddAsLast(Translate(""));
      l_arr_strColumnHeadersDialog.AddAsLast(Translate(""));
      VectorCustomDialogs::LoadingDialogSetResources(l_arr_strColumnHeadersDialog);
      if (t_blnClinicalNGSStarlet == ASWGLOBAL::BOOL::TRUE)
      {
        l_strFullpathLoadingPicture = StrConcat12(Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\"), t_strKitProvider, Translate("\\"), t_strKitName, Translate("\\Library\\NGSStarLoading\\ClinicalNGSStarletPictures\\ReagentContainerCarrier1and2.jpg"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      }
      else
      {
        l_strFullpathLoadingPicture = StrConcat12(Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\"), t_strKitProvider, Translate("\\"), t_strKitName, Translate("\\Library\\NGSStarLoading\\NGSStarChannelPictures\\ReagentContainerCarrier1and2.jpg"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      }
      if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialog(Translate(""), VectorCustomDialogs::ButtonType::YesNoCancel, 0, 0, 0, Translate("Attention! Do you want to refill and reload containers?"), Translate("Click Yes to refill and reload manually , No to continue without change, Cancel to Abort"), l_strFullpathLoadingPicture, Translate(""), 0, l_arr_DialogCol1, l_arr_DialogCol2, l_arr_DialogCol3);
      if (l_intReturnDisplayDialog == 2)
      {
        abort;
      }
      else
      {
        if (l_intReturnDisplayDialog == 6)
        {
          o_bln_RefillContainers = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          o_bln_RefillContainers = ASWGLOBAL::BOOL::FALSE;
        }
      }
      if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
      {
        {
          loopCounter1 = 0;
          while (1 == 1)
          {
            loopCounter1 = loopCounter1 + 1;
            onerror goto errLabel_19 ;
            err.Clear();
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            break;
            errLabel_19 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            }   /* end if from skip handler if no error */
          }
        }
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_CheckForSufficientVolumeIn50mlTroughs<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function _DATA_TranslateiSWAPErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedTransportInformaton ) void {
    private variable l_strMainError;
    private variable l_intErrorValue;
    private variable l_strErrorRecovery;
    private variable l_strSlaveError;
    o_strTranslatedTransportInformaton = 0;
    l_intErrorValue = 0;
    l_strMainError = Translate("unknown error");
    l_strSlaveError = Translate("unknown error");
    l_strErrorRecovery = Translate("unknown error");
    if (i_intMainError == 0)
    {
      l_strMainError = Translate("No main error.");
    }
    if (i_intMainError == 1)
    {
      l_strMainError = Translate("Syntax error.");
    }
    if (i_intMainError == 2)
    {
      l_strMainError = Translate("Hardware error. Drive blocked, low power etc.");
    }
    if (i_intMainError == 3)
    {
      l_strMainError = Translate("Not Executed Error. There was an error in previous part command.");
    }
    if (i_intMainError == 4)
    {
      l_strMainError = Translate("Clot Error. Tip blocked.");
    }
    if (i_intMainError == 5)
    {
      l_strMainError = Translate("Barcode unreadable. Bad or missing barcode.");
    }
    if (i_intMainError == 6)
    {
      l_strMainError = Translate("Insufficient Liquid Error. Not enough liquid available.");
    }
    if (i_intMainError == 7)
    {
      l_strMainError = Translate("Tip already fitted. Repeated attempts to fit a tip or iSwap movement with tips.");
    }
    if (i_intMainError == 8)
    {
      l_strMainError = Translate("No Tip. Command was started without fitting tip. Tip was not fitted or fell off again.");
    }
    if (i_intMainError == 9)
    {
      l_strMainError = Translate("No Carrier. Load command without carrier performed.");
    }
    if (i_intMainError == 10)
    {
      l_strMainError = Translate("Not completed. Command in command buffer was aborted due to an error in a previous command, or command stack was deleted.");
    }
    if (i_intMainError == 11)
    {
      l_strMainError = Translate("Pressure LLD Error. A dispense with pressure liquid level detection is not allowed.");
    }
    if (i_intMainError == 12)
    {
      l_strMainError = Translate("No teach signal. X-Movement to LLD reached maximum allowable position without detecting teach signal.");
    }
    if (i_intMainError == 13)
    {
      l_strMainError = Translate("Loading tray error. Position already occupied.");
    }
    if (i_intMainError == 14)
    {
      l_strMainError = Translate("Pressure LLD Error. Pressure liquid level detection in a consecutive aspiration is not allowed.");
    }
    if (i_intMainError == 15)
    {
      l_strMainError = Translate("Not allowed parameter combination. I.e. pLLD and dispense or wrong X-drive assignment.");
    }
    if (i_intMainError == 16)
    {
      l_strMainError = Translate("Cover close error. Cover is not closed and couldn't be locked.");
    }
    if (i_intMainError == 17)
    {
      l_strMainError = Translate("Improper Aspiration or Dispense Error. The pressure-based aspiration / dispensation control reported an error ( not enough liquid ).");
    }
    if (i_intMainError == 18)
    {
      l_strMainError = Translate("Wash fluid or waste error. Missing wash fluid OR waste of particular washer is full.");
    }
    if (i_intMainError == 19)
    {
      l_strMainError = Translate("Incubation error. Incubator temperature out of limit.");
    }
    if (i_intMainError == 20)
    {
      l_strMainError = Translate("TADM overshot. Overshot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 21)
    {
      l_strMainError = Translate("No element. Expected element not detected.");
    }
    if (i_intMainError == 22)
    {
      l_strMainError = Translate("Element still holding. Get command is sent twice or element is not discarded.");
    }
    if (i_intMainError == 23)
    {
      l_strMainError = Translate("Element lost. Expected element is missing or lost.");
    }
    if (i_intMainError == 24)
    {
      l_strMainError = Translate("Illegal target plate position. Over or underflow of iSWAP positions OR iSWAP is not in park position during pipetting activities.");
    }
    if (i_intMainError == 25)
    {
      l_strMainError = Translate("Illegal user access. Carrier was manually removed or cover is open (immediate stop is executed).");
    }
    if (i_intMainError == 26)
    {
      l_strMainError = Translate("TADM undershot. Undershot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 27)
    {
      l_strMainError = Translate("Position Error. The position is out of range.");
    }
    if (i_intMainError == 28)
    {
      l_strMainError = Translate("Unexpected cLLD Error. The cLLD detected a liquid level above start height of liquid level search.");
    }
    if (i_intMainError == 29)
    {
      l_strMainError = Translate("Area already occupied. Its impossible to occupy area because this area is already in use.");
    }
    if (i_intMainError == 30)
    {
      l_strMainError = Translate("Impossible to occupy area. Area can't be occupied because is no solution for arm prepositioning.");
    }
    if (i_intMainError == 31)
    {
      l_strMainError = Translate("Anti drop control error. Anti drop controlling out of tolerance.");
    }
    if (i_intMainError == 32)
    {
      l_strMainError = Translate("Parameter out of range.");
    }
    if (i_intMainError == 33)
    {
      l_strMainError = Translate("Parameter does not belong to command, or not all parameters were sent.");
    }
    if (i_intMainError == 34)
    {
      l_strMainError = Translate("Node name unknown.");
    }
    if (i_intMainError == 35)
    {
      l_strMainError = Translate("ID parameter error.");
    }
    if (i_intMainError == 37)
    {
      l_strMainError = Translate("Node name defined twice.");
    }
    if (i_intMainError == 38)
    {
      l_strMainError = Translate("Faulty XL channel settings.");
    }
    if (i_intMainError == 39)
    {
      l_strMainError = Translate("Faulty robotic channel settings.");
    }
    if (i_intMainError == 40)
    {
      l_strMainError = Translate("PIP task busy.");
    }
    if (i_intMainError == 41)
    {
      l_strMainError = Translate("Auto load task busy.");
    }
    if (i_intMainError == 42)
    {
      l_strMainError = Translate("Miscellaneous task busy.");
    }
    if (i_intMainError == 43)
    {
      l_strMainError = Translate("Incubator task busy.");
    }
    if (i_intMainError == 44)
    {
      l_strMainError = Translate("Washer task busy.");
    }
    if (i_intMainError == 45)
    {
      l_strMainError = Translate("iSWAP task busy.");
    }
    if (i_intMainError == 46)
    {
      l_strMainError = Translate("CoRe 96 head task busy.");
    }
    if (i_intMainError == 47)
    {
      l_strMainError = Translate("Carrier sensor doesn't work properly.");
    }
    if (i_intMainError == 48)
    {
      l_strMainError = Translate("CoRe 384 head task busy.");
    }
    if (i_intMainError == 49)
    {
      l_strMainError = Translate("Nano pipettor task busy.");
    }
    if (i_intMainError == 50)
    {
      l_strMainError = Translate("XL channel task busy.");
    }
    if (i_intMainError == 51)
    {
      l_strMainError = Translate("Tube gripper task busy.");
    }
    if (i_intMainError == 52)
    {
      l_strMainError = Translate("Imaging channel task busy.");
    }
    if (i_intMainError == 53)
    {
      l_strMainError = Translate("Robotic channel task busy.");
    }
    if (i_intMainError == 99)
    {
      l_strMainError = Translate("Slave Error. This error code indicates an error in one of the slaves.");
    }
    if (i_intMainError == 102)
    {
      l_strMainError = Translate("Liquid Level Error. Liquid surface not detected.");
    }
    if (i_intMainError == 104)
    {
      l_strMainError = Translate("Not Aspirated Error. Dispense volume exceeds the aspirated volume.");
    }
    if (i_intMainError == 105)
    {
      l_strMainError = Translate("Improper Dispensation Error. The dispensed volume is out of tolerance (may only occur for Nano Pipettor Dispense steps).");
    }
    if (i_intSlaveError == 0)
    {
      l_strSlaveError = Translate("No slave error.");
    }
    if (i_intSlaveError == 20)
    {
      l_strSlaveError = Translate("No I²C Bus or EEPROM not working. Transfer check error. No communication to EEPROM.");
    }
    if (i_intSlaveError == 30)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined command.");
    }
    if (i_intSlaveError == 31)
    {
      l_strSlaveError = Translate("Syntax check error. Unknown parameter.");
    }
    if (i_intSlaveError == 32)
    {
      l_strSlaveError = Translate("Syntax check error. Parameter out of range.");
    }
    if (i_intSlaveError == 36)
    {
      l_strSlaveError = Translate("General error during execution of commands. Stop during execution of a command.");
    }
    if (i_intSlaveError == 37)
    {
      l_strSlaveError = Translate("General error during execution of commands. Adjustment sensor. The drive moved to maximal or minimal position without detecting the adjustment sensor.");
    }
    if (i_intSlaveError == 38)
    {
      l_strSlaveError = Translate("General error during execution of commands. Adjustment sensor. The adjustment sensor is switched before movement starts.");
    }
    if (i_intSlaveError == 40)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process.");
    }
    if (i_intSlaveError == 41)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process.");
    }
    if (i_intSlaveError == 42)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process.");
    }
    if (i_intSlaveError == 50)
    {
      l_strSlaveError = Translate("Y-drive - max movement without sensor edge recognition, supervision. Drive locked, init sensor fault may arise only on initialization command.");
    }
    if (i_intSlaveError == 51)
    {
      l_strSlaveError = Translate("Y-drive - Supervision. Movement command sent before drive initialized may arise on all movement commands except initialization command and re. movement without supervision.");
    }
    if (i_intSlaveError == 52)
    {
      l_strSlaveError = Translate("Y-drive - Movement error. Supervision. Drive locked, incremental sensor fault may arise on all movement commands..");
    }
    if (i_intSlaveError == 53)
    {
      l_strSlaveError = Translate("Y-drive - Movement error. position counter over-/ underflow. desired absolute position leads to an under-/overflow of position limitation. Drive does not execute any movement.");
    }
    if (i_intSlaveError == 60)
    {
      l_strSlaveError = Translate("Z-drive - Init failed. Drive locked.");
    }
    if (i_intSlaveError == 61)
    {
      l_strSlaveError = Translate("Z-drive - Drive not initialized. Movement command sent before drive initialized.");
    }
    if (i_intSlaveError == 62)
    {
      l_strSlaveError = Translate("Z-drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 63)
    {
      l_strSlaveError = Translate("Z-drive - Step monitoring. Movement error - desired absolute position leads to an under-/ overflow of position limitation.");
    }
    if (i_intSlaveError == 70)
    {
      l_strSlaveError = Translate("Rotation drive - Initialization failed. drive locked.");
    }
    if (i_intSlaveError == 71)
    {
      l_strSlaveError = Translate("Rotation drive - Drive not initialized. Movement command sent before drive initialized.");
    }
    if (i_intSlaveError == 72)
    {
      l_strSlaveError = Translate("Rotation drive - Movement error. Drive locked.");
    }
    if (i_intSlaveError == 73)
    {
      l_strSlaveError = Translate("Rotation drive - Movement error. desired absolute position leads to an under-/ overfleow of position limitation.");
    }
    if (i_intSlaveError == 80)
    {
      l_strSlaveError = Translate("Wrist twist drive - Initialization failed. Drive locked.");
    }
    if (i_intSlaveError == 81)
    {
      l_strSlaveError = Translate("Wrist twist drive - Drive not initialized. Movement command sent before drive initialized.");
    }
    if (i_intSlaveError == 82)
    {
      l_strSlaveError = Translate("Wrist twist drive - Movement error. Drive locked.");
    }
    if (i_intSlaveError == 83)
    {
      l_strSlaveError = Translate("Wrist twist drive - Movement error. Desire absolute position leads to an under-/ overflow of position limitation.");
    }
    if (i_intSlaveError == 85)
    {
      l_strSlaveError = Translate("Gripper drive - No communication to DMS digital potentiometer. Hardware error.");
    }
    if (i_intSlaveError == 86)
    {
      l_strSlaveError = Translate("Gripper drive - Auto adjustment of DMS digital potentiometer not possible. Hardware error.");
    }
    if (i_intSlaveError == 89)
    {
      l_strSlaveError = Translate("Gripper drive - Movement error. Drive locked.");
    }
    if (i_intSlaveError == 90)
    {
      l_strSlaveError = Translate("Gripper drive - Initialization failed. Drive locked.");
    }
    if (i_intSlaveError == 91)
    {
      l_strSlaveError = Translate("Gripper drive - Drive not initialized. Movement command sent before drive initialized.");
    }
    if (i_intSlaveError == 92)
    {
      l_strSlaveError = Translate("Gripper drive - Movement error. Drive locked.");
    }
    if (i_intSlaveError == 93)
    {
      l_strSlaveError = Translate("Gripper drive - Movement error. Desired absolute position leads to an under-/overflow of position limitation.");
    }
    if (i_intSlaveError == 94)
    {
      l_strSlaveError = Translate("Gripper drive - Plate not found. DMS sensor.");
    }
    if (i_intSlaveError == 96)
    {
      l_strSlaveError = Translate("Gripper drive - Plate not available. The expected object is no longer available. May be lost.");
    }
    if (i_intSlaveError == 97)
    {
      l_strSlaveError = Translate("Gripper drive - Not expected plate found. Not expected object is still gripped.");
    }
    if (i_intErrorRecovery == 0)
    {
      l_strErrorRecovery = Translate("No recovery.");
    }
    if (i_intErrorRecovery == 1)
    {
      l_strErrorRecovery = Translate("Abort - Run aborted.");
    }
    if (i_intErrorRecovery == 2)
    {
      l_strErrorRecovery = Translate("Cancel - run canceled or user defined errorhandling  was executed.");
    }
    if (i_intErrorRecovery == 3)
    {
      l_strErrorRecovery = Translate("Initialize. Instrument initialized again.");
    }
    if (i_intErrorRecovery == 4)
    {
      l_strErrorRecovery = Translate("Repeat. Command repeated.");
    }
    if (i_intErrorRecovery == 5)
    {
      l_strErrorRecovery = Translate("Exclude. Channel or position excluded until next tip pick up.");
    }
    if (i_intErrorRecovery == 6)
    {
      l_strErrorRecovery = Translate("Waste. Tip ejected to the default waste.");
    }
    if (i_intErrorRecovery == 7)
    {
      l_strErrorRecovery = Translate("Air. Rest of missing volume filled up with air.");
    }
    if (i_intErrorRecovery == 8)
    {
      l_strErrorRecovery = Translate("Bottom. Aspiration repeated on container bottom.");
    }
    if (i_intErrorRecovery == 9)
    {
      l_strErrorRecovery = Translate("Continue. Run continued without any change.");
    }
    if (i_intErrorRecovery == 10)
    {
      l_strErrorRecovery = Translate("Barcode. Barcode assigned manually.");
    }
    if (i_intErrorRecovery == 11)
    {
      l_strErrorRecovery = Translate("Next. Command repeated on next sequence position.");
    }
    if (i_intErrorRecovery == 12)
    {
      l_strErrorRecovery = Translate("Available. Available volume used.");
    }
    if (l_strMainError == "unknown error")
    {
      l_strMainError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strSlaveError == "unknown error")
    {
      l_strSlaveError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strErrorRecovery == "unknown error")
    {
      l_strErrorRecovery = Translate(" error not translated by library - check log file to retrieve data");
    }
    l_strMainError = StrConcat4(l_strMainError, Translate(" - code : "), i_intMainError, Translate(""));
    l_strSlaveError = StrConcat4(l_strSlaveError, Translate(" - code : "), i_intSlaveError, Translate(""));
    l_strErrorRecovery = StrConcat4(l_strErrorRecovery, Translate(" - code : "), i_intErrorRecovery, Translate(""));
    l_intErrorValue = l_intErrorValue + i_intMainError;
    l_intErrorValue = l_intErrorValue + i_intSlaveError;
    l_intErrorValue = l_intErrorValue + i_intErrorRecovery;
    if (l_intErrorValue == 0)
    {
      o_strTranslatedTransportInformaton = Translate("transport ok.");
    }
    else
    {
      o_strTranslatedTransportInformaton = StrConcat8(l_strMainError, Translate(" ; "), l_strSlaveError, Translate(" ; "), l_strErrorRecovery, Translate(""), Translate(""), Translate(""));
      Trace ("Main error : ", i_intMainError, " +++ Slave error : ", i_intSlaveError, " +++ Recovery button : ", i_intErrorRecovery);
    }
  }

  private function _DATA_AnalyzeStepReturnValueOfTransportStepAndWriteToNGSStarReport( variable i_strStepReturnValueGetPlate, variable i_strStepReturnValuePlacePlate, variable i_intTransportTool, variable i_strReadCurrentBarcode ) void {
    private variable l_strCurrentLabIDTarget;
    private variable l_intNumberOfPositions;
    private variable l_strCurrentPosIDTarget;
    private variable l_intGetErrorRecovery;
    private variable l_strCurrentTime;
    private variable l_strCurrentDate;
    private variable l_strCurrentLabIDSource;
    private variable l_intIndexNumberOfPositions;
    private variable l_intGetSlaveErrorCode;
    private variable l_intGetPositionFromNum;
    private variable l_intGetMainErrorCode;
    private variable l_strGetStepData;
    private variable l_strCurrentPosIDSource;
    private file l_hdlNGSStarReportFile2;
    private variable l_strTranslatedTransportnformation;
    private variable l_strTransportTool;
    private variable l_strEmptyString;
    private variable l_strTransportInformation2;
    if(0){
      Trace ("StepReturnValue get plate to be analyzed :  ", i_strStepReturnValueGetPlate);
      Trace ("StepReturnValue place plate to be analyzed :  ", i_strStepReturnValuePlacePlate);
    }
    l_strCurrentDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    l_strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    if(0){
      Trace ("Update Current Date                :  ", l_strCurrentDate);
      Trace ("Update Current Time                :  ", l_strCurrentTime);
    }
    l_strEmptyString = Translate("");
    l_strTransportInformation2 = Translate(" transported to");
    if (i_intTransportTool == 1)
    {
      l_strTransportTool = Translate("iSWAP");
    }
    else
    {
      if (i_intTransportTool == 2)
      {
        l_strTransportTool = Translate("CORE gripper");
      }
      else
      {
        l_strTransportTool = Translate("undefined tool - check definition");
      }
    }
    l_strTransportTool = StrConcat2(Translate(" used tool : "), l_strTransportTool);
    onerror goto errLabel_20 ;
    err.Clear();
    l_hdlNGSStarReportFile2.AddField("Date", l_strCurrentDate, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Time", l_strCurrentTime, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Source", l_strCurrentLabIDSource, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Source", l_strCurrentPosIDSource, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transfer Volume", l_strTransportInformation2, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Target", l_strCurrentLabIDTarget, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Target", l_strCurrentPosIDTarget, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Barcode", i_strReadCurrentBarcode, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transport information", l_strTranslatedTransportnformation, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Aspiration information", l_strTransportTool, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Dispense information", l_strEmptyString, hslString, 255);
    if( 0 == l_hdlNGSStarReportFile2.Open(t_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
    }
    errLabel_20 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      _DATA_IntegratedAbortHandler(Translate("NGSStarProcesses.smt "), Translate("_DATA_AnalyseStepReturnValueOfTransportStepAndWriteToNGSStarReport. This smt writes labware ID time stamp and Position ID into a customized report file .xls format. Data based on step return value of channels only."));
    }   /* end if from skip handler if no error */
    l_intNumberOfPositions = StepReturn::GetNumberOfPositions(i_strStepReturnValueGetPlate);
    {
      for(l_intIndexNumberOfPositions = 0; l_intIndexNumberOfPositions < l_intNumberOfPositions;)
      {
        l_intIndexNumberOfPositions = l_intIndexNumberOfPositions + 1;
        l_intGetPositionFromNum = StepReturn::GetPositionFromNum(l_intIndexNumberOfPositions, i_strStepReturnValueGetPlate);
        l_strCurrentLabIDSource = StepReturn::GetLabwareId(l_intGetPositionFromNum, i_strStepReturnValueGetPlate);
        l_strCurrentPosIDSource = StepReturn::GetPositionId(l_intGetPositionFromNum, i_strStepReturnValueGetPlate);
        if(0){
          l_strGetStepData = StepReturn::GetStepData(l_intIndexNumberOfPositions, i_strStepReturnValueGetPlate);
        }
        l_strGetStepData = StepReturn::GetStepData(l_intGetPositionFromNum, i_strStepReturnValueGetPlate);
        if(0){
          l_intGetMainErrorCode = StepReturn::GetMainError(l_intIndexNumberOfPositions, i_strStepReturnValueGetPlate);
        }
        l_intGetMainErrorCode = StepReturn::GetMainError(l_intGetPositionFromNum, i_strStepReturnValueGetPlate);
        if(0){
          l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intIndexNumberOfPositions, i_strStepReturnValueGetPlate);
        }
        l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intGetPositionFromNum, i_strStepReturnValueGetPlate);
        if(0){
          l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intIndexNumberOfPositions, i_strStepReturnValueGetPlate);
        }
        l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intGetPositionFromNum, i_strStepReturnValueGetPlate);
        if (i_intTransportTool == 1)
        {
          _DATA_TranslateiSWAPErrorCodes(l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedTransportnformation);
        }
        if (i_intTransportTool == 2)
        {
          _DATA_TranslateChannelErrorCodes(2, l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedTransportnformation);
        }
        l_intGetPositionFromNum = StepReturn::GetPositionFromNum(l_intIndexNumberOfPositions, i_strStepReturnValuePlacePlate);
        l_strCurrentLabIDTarget = StepReturn::GetLabwareId(l_intGetPositionFromNum, i_strStepReturnValuePlacePlate);
        l_strCurrentPosIDTarget = StepReturn::GetPositionId(l_intGetPositionFromNum, i_strStepReturnValuePlacePlate);
        if(0){
          l_strGetStepData = StepReturn::GetStepData(l_intIndexNumberOfPositions, i_strStepReturnValuePlacePlate);
        }
        l_strGetStepData = StepReturn::GetStepData(l_intGetPositionFromNum, i_strStepReturnValuePlacePlate);
        if(0){
          l_intGetMainErrorCode = StepReturn::GetMainError(l_intIndexNumberOfPositions, i_strStepReturnValuePlacePlate);
        }
        l_intGetMainErrorCode = StepReturn::GetMainError(l_intGetPositionFromNum, i_strStepReturnValuePlacePlate);
        if(0){
          l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intIndexNumberOfPositions, i_strStepReturnValuePlacePlate);
        }
        l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intGetPositionFromNum, i_strStepReturnValuePlacePlate);
        if(0){
          l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intIndexNumberOfPositions, i_strStepReturnValuePlacePlate);
        }
        l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intGetPositionFromNum, i_strStepReturnValuePlacePlate);
        if (i_intTransportTool == 1)
        {
          _DATA_TranslateiSWAPErrorCodes(l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedTransportnformation);
        }
        if (i_intTransportTool == 2)
        {
          _DATA_TranslateChannelErrorCodes(2, l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedTransportnformation);
        }
        if( 0 == l_hdlNGSStarReportFile2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != l_hdlNGSStarReportFile2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlNGSStarReportFile2.RemoveFields();
  }

  function _DATA_TranslateMultiProbeHead96ErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedPipettingInformaton ) void {
    private variable l_strMainError;
    private variable l_intErrorValue;
    private variable l_strErrorRecovery;
    private variable l_strSlaveError;
    o_strTranslatedPipettingInformaton = 0;
    l_intErrorValue = 0;
    l_strMainError = Translate("unknown error");
    l_strSlaveError = Translate("unknown error");
    l_strErrorRecovery = Translate("unknown error");
    if (i_intMainError == 0)
    {
      l_strMainError = Translate("No main error.");
    }
    if (i_intMainError == 1)
    {
      l_strMainError = Translate("Syntax error.");
    }
    if (i_intMainError == 2)
    {
      l_strMainError = Translate("Hardware error. Drive blocked, low power etc.");
    }
    if (i_intMainError == 3)
    {
      l_strMainError = Translate("Not Executed Error. There was an error in previous part command.");
    }
    if (i_intMainError == 4)
    {
      l_strMainError = Translate("Clot Error. Tip blocked.");
    }
    if (i_intMainError == 5)
    {
      l_strMainError = Translate("Barcode unreadable. Bad or missing barcode.");
    }
    if (i_intMainError == 6)
    {
      l_strMainError = Translate("Insufficient Liquid Error. Not enough liquid available.");
    }
    if (i_intMainError == 7)
    {
      l_strMainError = Translate("Tip already fitted. Repeated attempts to fit a tip or iSwap movement with tips.");
    }
    if (i_intMainError == 8)
    {
      l_strMainError = Translate("No Tip. Command was started without fitting tip. Tip was not fitted or fell off again.");
    }
    if (i_intMainError == 9)
    {
      l_strMainError = Translate("No Carrier. Load command without carrier performed.");
    }
    if (i_intMainError == 10)
    {
      l_strMainError = Translate("Not completed. Command in command buffer was aborted due to an error in a previous command, or command stack was deleted.");
    }
    if (i_intMainError == 11)
    {
      l_strMainError = Translate("Pressure LLD Error. A dispense with pressure liquid level detection is not allowed.");
    }
    if (i_intMainError == 12)
    {
      l_strMainError = Translate("No teach signal. X-Movement to LLD reached maximum allowable position without detecting teach signal.");
    }
    if (i_intMainError == 13)
    {
      l_strMainError = Translate("Loading tray error. Position already occupied.");
    }
    if (i_intMainError == 14)
    {
      l_strMainError = Translate("Pressure LLD Error. Pressure liquid level detection in a consecutive aspiration is not allowed.");
    }
    if (i_intMainError == 15)
    {
      l_strMainError = Translate("Not allowed parameter combination. I.e. pLLD and dispense or wrong X-drive assignment.");
    }
    if (i_intMainError == 16)
    {
      l_strMainError = Translate("Cover close error. Cover is not closed and couldn't be locked.");
    }
    if (i_intMainError == 17)
    {
      l_strMainError = Translate("Improper Aspiration or Dispense Error. The pressure-based aspiration / dispensation control reported an error ( not enough liquid ).");
    }
    if (i_intMainError == 18)
    {
      l_strMainError = Translate("Wash fluid or waste error. Missing wash fluid OR waste of particular washer is full.");
    }
    if (i_intMainError == 19)
    {
      l_strMainError = Translate("Incubation error. Incubator temperature out of limit.");
    }
    if (i_intMainError == 20)
    {
      l_strMainError = Translate("TADM overshot. Overshot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 21)
    {
      l_strMainError = Translate("No element. Expected element not detected.");
    }
    if (i_intMainError == 22)
    {
      l_strMainError = Translate("Element still holding. Get command is sent twice or element is not discarded.");
    }
    if (i_intMainError == 23)
    {
      l_strMainError = Translate("Element lost. Expected element is missing or lost.");
    }
    if (i_intMainError == 24)
    {
      l_strMainError = Translate("Illegal target plate position. Over or underflow of iSWAP positions OR iSWAP is not in park position during pipetting activities.");
    }
    if (i_intMainError == 25)
    {
      l_strMainError = Translate("Illegal user access. Carrier was manually removed or cover is open (immediate stop is executed).");
    }
    if (i_intMainError == 26)
    {
      l_strMainError = Translate("TADM undershot. Undershot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 27)
    {
      l_strMainError = Translate("Position Error. The position is out of range.");
    }
    if (i_intMainError == 28)
    {
      l_strMainError = Translate("Unexpected cLLD Error. The cLLD detected a liquid level above start height of liquid level search.");
    }
    if (i_intMainError == 29)
    {
      l_strMainError = Translate("Area already occupied. Its impossible to occupy area because this area is already in use.");
    }
    if (i_intMainError == 30)
    {
      l_strMainError = Translate("Impossible to occupy area. Area can't be occupied because is no solution for arm prepositioning.");
    }
    if (i_intMainError == 31)
    {
      l_strMainError = Translate("Anti drop control error. Anti drop controlling out of tolerance.");
    }
    if (i_intMainError == 32)
    {
      l_strMainError = Translate("Parameter out of range.");
    }
    if (i_intMainError == 33)
    {
      l_strMainError = Translate("Parameter does not belong to command, or not all parameters were sent.");
    }
    if (i_intMainError == 34)
    {
      l_strMainError = Translate("Node name unknown.");
    }
    if (i_intMainError == 35)
    {
      l_strMainError = Translate("ID parameter error.");
    }
    if (i_intMainError == 37)
    {
      l_strMainError = Translate("Node name defined twice.");
    }
    if (i_intMainError == 38)
    {
      l_strMainError = Translate("Faulty XL channel settings.");
    }
    if (i_intMainError == 39)
    {
      l_strMainError = Translate("Faulty robotic channel settings.");
    }
    if (i_intMainError == 40)
    {
      l_strMainError = Translate("PIP task busy.");
    }
    if (i_intMainError == 41)
    {
      l_strMainError = Translate("Auto load task busy.");
    }
    if (i_intMainError == 42)
    {
      l_strMainError = Translate("Miscellaneous task busy.");
    }
    if (i_intMainError == 43)
    {
      l_strMainError = Translate("Incubator task busy.");
    }
    if (i_intMainError == 44)
    {
      l_strMainError = Translate("Washer task busy.");
    }
    if (i_intMainError == 45)
    {
      l_strMainError = Translate("iSWAP task busy.");
    }
    if (i_intMainError == 46)
    {
      l_strMainError = Translate("CoRe 96 head task busy.");
    }
    if (i_intMainError == 47)
    {
      l_strMainError = Translate("Carrier sensor doesn't work properly.");
    }
    if (i_intMainError == 48)
    {
      l_strMainError = Translate("CoRe 384 head task busy.");
    }
    if (i_intMainError == 49)
    {
      l_strMainError = Translate("Nano pipettor task busy.");
    }
    if (i_intMainError == 50)
    {
      l_strMainError = Translate("XL channel task busy.");
    }
    if (i_intMainError == 51)
    {
      l_strMainError = Translate("Tube gripper task busy.");
    }
    if (i_intMainError == 52)
    {
      l_strMainError = Translate("Imaging channel task busy.");
    }
    if (i_intMainError == 53)
    {
      l_strMainError = Translate("Robotic channel task busy.");
    }
    if (i_intMainError == 99)
    {
      l_strMainError = Translate("Slave Error. This error code indicates an error in one of the slaves.");
    }
    if (i_intMainError == 102)
    {
      l_strMainError = Translate("Liquid Level Error. Liquid surface not detected.");
    }
    if (i_intMainError == 104)
    {
      l_strMainError = Translate("Not Aspirated Error. Dispense volume exceeds the aspirated volume.");
    }
    if (i_intMainError == 105)
    {
      l_strMainError = Translate("Improper Dispensation Error. The dispensed volume is out of tolerance (may only occur for Nano Pipettor Dispense steps).");
    }
    if (i_intSlaveError == 0)
    {
      l_strSlaveError = Translate("No slave error.");
    }
    if (i_intSlaveError == 21)
    {
      l_strSlaveError = Translate("No I²C Bus or EEPROM not working. Transfer check error. No communication to EEPROM.");
    }
    if (i_intSlaveError == 25)
    {
      l_strSlaveError = Translate("Download error - Flash EPROM data are wrong. Intel hex row wrong or wrong hex character.");
    }
    if (i_intSlaveError == 26)
    {
      l_strSlaveError = Translate("Download error - Flash EPROM cannot be programmed. Flash EPROM not working.");
    }
    if (i_intSlaveError == 27)
    {
      l_strSlaveError = Translate("Download error - Flash EPROM cannot be erased. Flash EPROM not working.");
    }
    if (i_intSlaveError == 28)
    {
      l_strSlaveError = Translate("Download error - Flash EPROM check sum error. Check sums stored in Flash EPROM do not match those calculated.");
    }
    if (i_intSlaveError == 30)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined command.");
    }
    if (i_intSlaveError == 31)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined parameter.");
    }
    if (i_intSlaveError == 32)
    {
      l_strSlaveError = Translate("Syntax check error. Parameter out of range.");
    }
    if (i_intSlaveError == 35)
    {
      l_strSlaveError = Translate("General error during execution of commands. Voltages outside permitted range.");
    }
    if (i_intSlaveError == 36)
    {
      l_strSlaveError = Translate("General error during execution of commands. Stop during execution of a command.");
    }
    if (i_intSlaveError == 37)
    {
      l_strSlaveError = Translate("General error during execution of commands. The adjustment sensor did not switch. The drive drived to maximal / minimal position without detecting the adjustment sensor. ");
    }
    if (i_intSlaveError == 40)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process.");
    }
    if (i_intSlaveError == 50)
    {
      l_strSlaveError = Translate("Dispensing drive - Init position not found. Drive locked.");
    }
    if (i_intSlaveError == 51)
    {
      l_strSlaveError = Translate("Dispensing drive - Drive not initialized. Movement command sent before drive initialized.");
    }
    if (i_intSlaveError == 52)
    {
      l_strSlaveError = Translate("Dispensing drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 53)
    {
      l_strSlaveError = Translate("Dispensing drive - Step monitoring. Maximum volume in tip reached.");
    }
    if (i_intSlaveError == 54)
    {
      l_strSlaveError = Translate("Dispensing drive - Position monitoring. Position out of permitted area.");
    }
    if (i_intSlaveError == 55)
    {
      l_strSlaveError = Translate("Y-drive - Initialization failed. Drive blocked.");
    }
    if (i_intSlaveError == 56)
    {
      l_strSlaveError = Translate("Y-drive - drive not initialized.");
    }
    if (i_intSlaveError == 57)
    {
      l_strSlaveError = Translate("Y-drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 58)
    {
      l_strSlaveError = Translate("Y-drive - Position out of permitted area. Desired absolute position leads to an under-/ overflow of position limitation.");
    }
    if (i_intSlaveError == 60)
    {
      l_strSlaveError = Translate("Z-drive - Initialization failed. Drive blocked.");
    }
    if (i_intSlaveError == 61)
    {
      l_strSlaveError = Translate("Z-drive - drive not initialized.");
    }
    if (i_intSlaveError == 62)
    {
      l_strSlaveError = Translate("Z-drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 63)
    {
      l_strSlaveError = Translate("Z-drive - Position out of permitted area. Desired absolute position leads to an under-/ overflow of position limitation.");
    }
    if (i_intSlaveError == 65)
    {
      l_strSlaveError = Translate("Squeezer -drive - Initialization failed. Drive blocked.");
    }
    if (i_intSlaveError == 66)
    {
      l_strSlaveError = Translate("Squeezer -drive - drive not initialized.");
    }
    if (i_intSlaveError == 67)
    {
      l_strSlaveError = Translate("Squeezer -drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 68)
    {
      l_strSlaveError = Translate("Squeezer -drive -  Position out of permitted area. Desired absolute position leads to an under-/ overflow of position limitation.");
    }
    if (i_intSlaveError == 70)
    {
      l_strSlaveError = Translate("Liquid level detection - No liquid level found.");
    }
    if (i_intSlaveError == 71)
    {
      l_strSlaveError = Translate("Liquid level detection - Not enough liquid present.");
    }
    if (i_intSlaveError == 75)
    {
      l_strSlaveError = Translate("Tip handling - No tip picked up. Tip was not picked up.");
    }
    if (i_intSlaveError == 76)
    {
      l_strSlaveError = Translate("Tip handling - Tip already picked up. A fresh tip cannot be picked up because one is already present.");
    }
    if (i_intSlaveError == 81)
    {
      l_strSlaveError = Translate("Liquid handling - Clot detected.");
    }
    if (i_intSlaveError == 82)
    {
      l_strSlaveError = Translate("Liquid handling - TADM measurement out of lower limit curve.");
    }
    if (i_intSlaveError == 83)
    {
      l_strSlaveError = Translate("Liquid handling - TADM measurement out of upper limit curve.");
    }
    if (i_intSlaveError == 84)
    {
      l_strSlaveError = Translate("Liquid handling - Not enough memory for TADM measurement.");
    }
    if (i_intSlaveError == 90)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve not resetable.");
    }
    if (i_intSlaveError == 91)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve not programable.");
    }
    if (i_intSlaveError == 92)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve name not found.");
    }
    if (i_intSlaveError == 93)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve data incorrect.");
    }
    if (i_intSlaveError == 94)
    {
      l_strSlaveError = Translate("TADM limit curve - not enough memory for limit curve.");
    }
    if (i_intSlaveError == 95)
    {
      l_strSlaveError = Translate("TADM limit curve - not allowed limit curve index.");
    }
    if (i_intSlaveError == 96)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve already stored.");
    }
    if (i_intErrorRecovery == 0)
    {
      l_strErrorRecovery = Translate("No recovery.");
    }
    if (i_intErrorRecovery == 1)
    {
      l_strErrorRecovery = Translate("Abort - Run aborted.");
    }
    if (i_intErrorRecovery == 2)
    {
      l_strErrorRecovery = Translate("Cancel - run canceled or user defined errorhandling  was executed.");
    }
    if (i_intErrorRecovery == 3)
    {
      l_strErrorRecovery = Translate("Initialize. Instrument initialized again.");
    }
    if (i_intErrorRecovery == 4)
    {
      l_strErrorRecovery = Translate("Repeat. Command repeated.");
    }
    if (i_intErrorRecovery == 5)
    {
      l_strErrorRecovery = Translate("Exclude. Channel or position excluded until next tip pick up.");
    }
    if (i_intErrorRecovery == 6)
    {
      l_strErrorRecovery = Translate("Waste. Tip ejected to the default waste.");
    }
    if (i_intErrorRecovery == 7)
    {
      l_strErrorRecovery = Translate("Air. Rest of missing volume filled up with air.");
    }
    if (i_intErrorRecovery == 8)
    {
      l_strErrorRecovery = Translate("Bottom. Aspiration repeated on container bottom.");
    }
    if (i_intErrorRecovery == 9)
    {
      l_strErrorRecovery = Translate("Continue. Run continued without any change.");
    }
    if (i_intErrorRecovery == 10)
    {
      l_strErrorRecovery = Translate("Barcode. Barcode assigned manually.");
    }
    if (i_intErrorRecovery == 11)
    {
      l_strErrorRecovery = Translate("Next. Command repeated on next sequence position.");
    }
    if (i_intErrorRecovery == 12)
    {
      l_strErrorRecovery = Translate("Available. Available volume used.");
    }
    if (l_strMainError == "unknown error")
    {
      l_strMainError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strSlaveError == "unknown error")
    {
      l_strSlaveError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strErrorRecovery == "unknown error")
    {
      l_strErrorRecovery = Translate(" error not translated by library - check log file to retrieve data");
    }
    l_strMainError = StrConcat4(l_strMainError, Translate(" - code : "), i_intMainError, Translate(""));
    l_strSlaveError = StrConcat4(l_strSlaveError, Translate(" - code : "), i_intSlaveError, Translate(""));
    l_strErrorRecovery = StrConcat4(l_strErrorRecovery, Translate(" - code : "), i_intErrorRecovery, Translate(""));
    l_intErrorValue = l_intErrorValue + i_intMainError;
    l_intErrorValue = l_intErrorValue + i_intSlaveError;
    l_intErrorValue = l_intErrorValue + i_intErrorRecovery;
    if (l_intErrorValue == 0)
    {
      o_strTranslatedPipettingInformaton = Translate("pipetting step ok.");
    }
    else
    {
      o_strTranslatedPipettingInformaton = StrConcat8(l_strMainError, Translate(" ; "), l_strSlaveError, Translate(" ; "), l_strErrorRecovery, Translate(""), Translate(""), Translate(""));
      Trace ("Main error : ", i_intMainError, " +++ Slave error : ", i_intSlaveError, " +++ Recovery button : ", i_intErrorRecovery);
    }
  }

  private function _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport( variable i_strStepReturnValueLoadingStep ) void {
    private variable l_intNumberOfPositions;
    private variable l_intGetErrorRecovery;
    private variable l_strCurrentTime;
    private variable l_strCurrentDate;
    private variable l_strCurrentLabIDSource;
    private variable l_intIndexNumberOfPositions;
    private variable l_intGetSlaveErrorCode;
    private variable l_strGetStepData;
    private variable l_intGetPositionFromNum;
    private variable l_intGetMainErrorCode;
    private variable l_strCurrentPosIDSource;
    private file l_hdlNGSStarReportFile2;
    private variable l_strEmptyString;
    private variable l_strTranslatedLoadingInformation;
    private variable l_strUsedTool;
    if(0){
      Trace ("StepReturnValue Loading step to be analyzed :  ", i_strStepReturnValueLoadingStep);
    }
    l_strCurrentDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    l_strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    if(0){
      Trace ("Update Current Date                :  ", l_strCurrentDate);
      Trace ("Update Current Time                :  ", l_strCurrentTime);
    }
    l_strUsedTool = Translate("used tool : Autoload.");
    l_strEmptyString = Translate("");
    onerror goto errLabel_21 ;
    err.Clear();
    l_hdlNGSStarReportFile2.AddField("Date", l_strCurrentDate, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Time", l_strCurrentTime, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Source", l_strCurrentLabIDSource, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Source", l_intGetPositionFromNum, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transfer Volume", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Target", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Target", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Barcode", l_strGetStepData, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transport information", l_strTranslatedLoadingInformation, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Aspiration information", l_strUsedTool, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Dispense information", l_strEmptyString, hslString, 255);
    if( 0 == l_hdlNGSStarReportFile2.Open(t_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
    }
    errLabel_21 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      _DATA_IntegratedAbortHandler(Translate("NGSStarProcesses.smt "), Translate("_DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport."));
    }   /* end if from skip handler if no error */
    l_intNumberOfPositions = StepReturn::GetNumberOfPositions(i_strStepReturnValueLoadingStep);
    {
      for(l_intIndexNumberOfPositions = 0; l_intIndexNumberOfPositions < l_intNumberOfPositions;)
      {
        l_intIndexNumberOfPositions = l_intIndexNumberOfPositions + 1;
        l_intGetPositionFromNum = StepReturn::GetPositionFromNum(l_intIndexNumberOfPositions, i_strStepReturnValueLoadingStep);
        l_strCurrentLabIDSource = StepReturn::GetLabwareId(l_intGetPositionFromNum, i_strStepReturnValueLoadingStep);
        l_strCurrentPosIDSource = StepReturn::GetPositionId(l_intGetPositionFromNum, i_strStepReturnValueLoadingStep);
        if(0){
          l_strGetStepData = StepReturn::GetStepData(l_intIndexNumberOfPositions, i_strStepReturnValueLoadingStep);
        }
        l_strGetStepData = StepReturn::GetStepData(l_intGetPositionFromNum, i_strStepReturnValueLoadingStep);
        if (l_strGetStepData != "")
        {
          if(0){
            l_intGetMainErrorCode = StepReturn::GetMainError(l_intIndexNumberOfPositions, i_strStepReturnValueLoadingStep);
          }
          l_intGetMainErrorCode = StepReturn::GetMainError(l_intGetPositionFromNum, i_strStepReturnValueLoadingStep);
          if(0){
            l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intIndexNumberOfPositions, i_strStepReturnValueLoadingStep);
          }
          l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intGetPositionFromNum, i_strStepReturnValueLoadingStep);
          if(0){
            l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intIndexNumberOfPositions, i_strStepReturnValueLoadingStep);
          }
          l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intGetPositionFromNum, i_strStepReturnValueLoadingStep);
          _DATA_TranslateAutoLoadErrorCodes(l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedLoadingInformation);
          if(0){
            Trace ("Update Current LabID Source        :  ", l_strCurrentLabIDSource);
            Trace ("Update Current PosID Source        :  ", l_strCurrentPosIDSource);
          }
          if( 0 == l_hdlNGSStarReportFile2.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
    }
    if( 0 != l_hdlNGSStarReportFile2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlNGSStarReportFile2.RemoveFields();
  }

  function _DATA_TranslateAutoLoadErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedAutoLoadInformaton ) void {
    private variable l_strMainError;
    private variable l_intErrorValue;
    private variable l_strErrorRecovery;
    private variable l_strSlaveError;
    o_strTranslatedAutoLoadInformaton = 0;
    l_intErrorValue = 0;
    l_strMainError = Translate("unknown error");
    l_strSlaveError = Translate("unknown error");
    l_strErrorRecovery = Translate("unknown error");
    if (i_intMainError == 0)
    {
      l_strMainError = Translate("No main error.");
    }
    if (i_intMainError == 1)
    {
      l_strMainError = Translate("Syntax error.");
    }
    if (i_intMainError == 2)
    {
      l_strMainError = Translate("Hardware error. Drive blocked, low power etc.");
    }
    if (i_intMainError == 3)
    {
      l_strMainError = Translate("Not Executed Error. There was an error in previous part command.");
    }
    if (i_intMainError == 4)
    {
      l_strMainError = Translate("Clot Error. Tip blocked.");
    }
    if (i_intMainError == 5)
    {
      l_strMainError = Translate("Barcode unreadable. Bad or missing barcode.");
    }
    if (i_intMainError == 6)
    {
      l_strMainError = Translate("Insufficient Liquid Error. Not enough liquid available.");
    }
    if (i_intMainError == 7)
    {
      l_strMainError = Translate("Tip already fitted. Repeated attempts to fit a tip or iSwap movement with tips.");
    }
    if (i_intMainError == 8)
    {
      l_strMainError = Translate("No Tip. Command was started without fitting tip. Tip was not fitted or fell off again.");
    }
    if (i_intMainError == 9)
    {
      l_strMainError = Translate("No Carrier. Load command without carrier performed.");
    }
    if (i_intMainError == 10)
    {
      l_strMainError = Translate("Not completed. Command in command buffer was aborted due to an error in a previous command, or command stack was deleted.");
    }
    if (i_intMainError == 11)
    {
      l_strMainError = Translate("Pressure LLD Error. A dispense with pressure liquid level detection is not allowed.");
    }
    if (i_intMainError == 12)
    {
      l_strMainError = Translate("No teach signal. X-Movement to LLD reached maximum allowable position without detecting teach signal.");
    }
    if (i_intMainError == 13)
    {
      l_strMainError = Translate("Loading tray error. Position already occupied.");
    }
    if (i_intMainError == 14)
    {
      l_strMainError = Translate("Pressure LLD Error. Pressure liquid level detection in a consecutive aspiration is not allowed.");
    }
    if (i_intMainError == 15)
    {
      l_strMainError = Translate("Not allowed parameter combination. I.e. pLLD and dispense or wrong X-drive assignment.");
    }
    if (i_intMainError == 16)
    {
      l_strMainError = Translate("Cover close error. Cover is not closed and couldn't be locked.");
    }
    if (i_intMainError == 17)
    {
      l_strMainError = Translate("Improper Aspiration or Dispense Error. The pressure-based aspiration / dispensation control reported an error ( not enough liquid ).");
    }
    if (i_intMainError == 18)
    {
      l_strMainError = Translate("Wash fluid or waste error. Missing wash fluid OR waste of particular washer is full.");
    }
    if (i_intMainError == 19)
    {
      l_strMainError = Translate("Incubation error. Incubator temperature out of limit.");
    }
    if (i_intMainError == 20)
    {
      l_strMainError = Translate("TADM overshot. Overshot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 21)
    {
      l_strMainError = Translate("No element. Expected element not detected.");
    }
    if (i_intMainError == 22)
    {
      l_strMainError = Translate("Element still holding. Get command is sent twice or element is not discarded.");
    }
    if (i_intMainError == 23)
    {
      l_strMainError = Translate("Element lost. Expected element is missing or lost.");
    }
    if (i_intMainError == 24)
    {
      l_strMainError = Translate("Illegal target plate position. Over or underflow of iSWAP positions OR iSWAP is not in park position during pipetting activities.");
    }
    if (i_intMainError == 25)
    {
      l_strMainError = Translate("Illegal user access. Carrier was manually removed or cover is open (immediate stop is executed).");
    }
    if (i_intMainError == 26)
    {
      l_strMainError = Translate("TADM undershot. Undershot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 27)
    {
      l_strMainError = Translate("Position Error. The position is out of range.");
    }
    if (i_intMainError == 28)
    {
      l_strMainError = Translate("Unexpected cLLD Error. The cLLD detected a liquid level above start height of liquid level search.");
    }
    if (i_intMainError == 29)
    {
      l_strMainError = Translate("Area already occupied. Its impossible to occupy area because this area is already in use.");
    }
    if (i_intMainError == 30)
    {
      l_strMainError = Translate("Impossible to occupy area. Area can't be occupied because is no solution for arm prepositioning.");
    }
    if (i_intMainError == 31)
    {
      l_strMainError = Translate("Anti drop control error. Anti drop controlling out of tolerance.");
    }
    if (i_intMainError == 32)
    {
      l_strMainError = Translate("Parameter out of range.");
    }
    if (i_intMainError == 33)
    {
      l_strMainError = Translate("Parameter does not belong to command, or not all parameters were sent.");
    }
    if (i_intMainError == 34)
    {
      l_strMainError = Translate("Node name unknown.");
    }
    if (i_intMainError == 35)
    {
      l_strMainError = Translate("ID parameter error.");
    }
    if (i_intMainError == 37)
    {
      l_strMainError = Translate("Node name defined twice.");
    }
    if (i_intMainError == 38)
    {
      l_strMainError = Translate("Faulty XL channel settings.");
    }
    if (i_intMainError == 39)
    {
      l_strMainError = Translate("Faulty robotic channel settings.");
    }
    if (i_intMainError == 40)
    {
      l_strMainError = Translate("PIP task busy.");
    }
    if (i_intMainError == 41)
    {
      l_strMainError = Translate("Auto load task busy.");
    }
    if (i_intMainError == 42)
    {
      l_strMainError = Translate("Miscellaneous task busy.");
    }
    if (i_intMainError == 43)
    {
      l_strMainError = Translate("Incubator task busy.");
    }
    if (i_intMainError == 44)
    {
      l_strMainError = Translate("Washer task busy.");
    }
    if (i_intMainError == 45)
    {
      l_strMainError = Translate("iSWAP task busy.");
    }
    if (i_intMainError == 46)
    {
      l_strMainError = Translate("CoRe 96 head task busy.");
    }
    if (i_intMainError == 47)
    {
      l_strMainError = Translate("Carrier sensor doesn't work properly.");
    }
    if (i_intMainError == 48)
    {
      l_strMainError = Translate("CoRe 384 head task busy.");
    }
    if (i_intMainError == 49)
    {
      l_strMainError = Translate("Nano pipettor task busy.");
    }
    if (i_intMainError == 50)
    {
      l_strMainError = Translate("XL channel task busy.");
    }
    if (i_intMainError == 51)
    {
      l_strMainError = Translate("Tube gripper task busy.");
    }
    if (i_intMainError == 52)
    {
      l_strMainError = Translate("Imaging channel task busy.");
    }
    if (i_intMainError == 53)
    {
      l_strMainError = Translate("Robotic channel task busy.");
    }
    if (i_intMainError == 99)
    {
      l_strMainError = Translate("Slave Error. This error code indicates an error in one of the slaves.");
    }
    if (i_intMainError == 102)
    {
      l_strMainError = Translate("Liquid Level Error. Liquid surface not detected.");
    }
    if (i_intMainError == 104)
    {
      l_strMainError = Translate("Not Aspirated Error. Dispense volume exceeds the aspirated volume.");
    }
    if (i_intMainError == 105)
    {
      l_strMainError = Translate("Improper Dispensation Error. The dispensed volume is out of tolerance (may only occur for Nano Pipettor Dispense steps).");
    }
    if (i_intSlaveError == 0)
    {
      l_strSlaveError = Translate("No slave error.");
    }
    if (i_intSlaveError == 20)
    {
      l_strSlaveError = Translate("No I²C Bus or EEPROM not working. Transfer check error. No communication to EEPROM.");
    }
    if (i_intSlaveError == 30)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined command.");
    }
    if (i_intSlaveError == 31)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined parameter.");
    }
    if (i_intSlaveError == 32)
    {
      l_strSlaveError = Translate("Syntax check error. Parameter out of range.");
    }
    if (i_intSlaveError == 35)
    {
      l_strSlaveError = Translate("General error during execution of commands. Voltages outside permitted range.");
    }
    if (i_intSlaveError == 36)
    {
      l_strSlaveError = Translate("General error during execution of commands. Stop during execution of a command.");
    }
    if (i_intSlaveError == 40)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process.");
    }
    if (i_intSlaveError == 50)
    {
      l_strSlaveError = Translate("Scanner X drive - Init position not found.");
    }
    if (i_intSlaveError == 51)
    {
      l_strSlaveError = Translate("Scanner X drive - Stepper motor not initialized. Command sent before motor initialized.");
    }
    if (i_intSlaveError == 52)
    {
      l_strSlaveError = Translate("Scanner X drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 55)
    {
      l_strSlaveError = Translate("Scanner rotation drive - drive blocked.");
    }
    if (i_intSlaveError == 60)
    {
      l_strSlaveError = Translate("Carrier Y drive - Init position not found. Hardware not working.");
    }
    if (i_intSlaveError == 61)
    {
      l_strSlaveError = Translate("Carrier Y drive - drive not initialized.");
    }
    if (i_intSlaveError == 62)
    {
      l_strSlaveError = Translate("Carrier Y drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 65)
    {
      l_strSlaveError = Translate("Carrier Z drive - Init position not found. Hardware not working.");
    }
    if (i_intSlaveError == 66)
    {
      l_strSlaveError = Translate("Carrier Z drive - drive not initialized.");
    }
    if (i_intSlaveError == 67)
    {
      l_strSlaveError = Translate("Carrier Z drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 70)
    {
      l_strSlaveError = Translate("Barcode scanner - Communication error. Hardware not working, scanner dysfunction.");
    }
    if (i_intSlaveError == 75)
    {
      l_strSlaveError = Translate("Loading indicator LED - Communication error to loading indicator. Communication to LEDs not working.");
    }
    if (i_intSlaveError == 80)
    {
      l_strSlaveError = Translate("Carrier handling - Identification barcode not readable. Missing or unreadable identification barcode or wrong barcode type definition.");
    }
    if (i_intSlaveError == 81)
    {
      l_strSlaveError = Translate("Carrier handling - No carrier present. Carrier missing or sensor not working.");
    }
    if (i_intSlaveError == 82)
    {
      l_strSlaveError = Translate("Carrier handling - No carrier loaded. Load or unload command without identification of carrier.");
    }
    if (i_intSlaveError == 83)
    {
      l_strSlaveError = Translate("Carrier handling - Loading tray is occupied. At unloading carrier detected on loading tray.");
    }
    if (i_intSlaveError == 84)
    {
      l_strSlaveError = Translate("Carrier handling - Data for free definable carrier not correct. Indices not in ascending order OR positions not in ascending order OR gab between barcode reading area to low.");
    }
    if (i_intErrorRecovery == 0)
    {
      l_strErrorRecovery = Translate("No recovery.");
    }
    if (i_intErrorRecovery == 1)
    {
      l_strErrorRecovery = Translate("Abort - Run aborted.");
    }
    if (i_intErrorRecovery == 2)
    {
      l_strErrorRecovery = Translate("Cancel - run canceled or user defined errorhandling  was executed.");
    }
    if (i_intErrorRecovery == 3)
    {
      l_strErrorRecovery = Translate("Initialize. Instrument initialized again.");
    }
    if (i_intErrorRecovery == 4)
    {
      l_strErrorRecovery = Translate("Repeat. Command repeated.");
    }
    if (i_intErrorRecovery == 5)
    {
      l_strErrorRecovery = Translate("Exclude. Channel or position excluded until next tip pick up.");
    }
    if (i_intErrorRecovery == 6)
    {
      l_strErrorRecovery = Translate("Waste. Tip ejected to the default waste.");
    }
    if (i_intErrorRecovery == 7)
    {
      l_strErrorRecovery = Translate("Air. Rest of missing volume filled up with air.");
    }
    if (i_intErrorRecovery == 8)
    {
      l_strErrorRecovery = Translate("Bottom. Aspiration repeated on container bottom.");
    }
    if (i_intErrorRecovery == 9)
    {
      l_strErrorRecovery = Translate("Continue. Run continued without any change.");
    }
    if (i_intErrorRecovery == 10)
    {
      l_strErrorRecovery = Translate("Barcode. Barcode assigned manually.");
    }
    if (i_intErrorRecovery == 11)
    {
      l_strErrorRecovery = Translate("Next. Command repeated on next sequence position.");
    }
    if (i_intErrorRecovery == 12)
    {
      l_strErrorRecovery = Translate("Available. Available volume used.");
    }
    if (l_strMainError == "unknown error")
    {
      l_strMainError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strSlaveError == "unknown error")
    {
      l_strSlaveError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strErrorRecovery == "unknown error")
    {
      l_strErrorRecovery = Translate(" error not translated by library - check log file to retrieve data");
    }
    l_strMainError = StrConcat4(l_strMainError, Translate(" - code : "), i_intMainError, Translate(""));
    l_strSlaveError = StrConcat4(l_strSlaveError, Translate(" - code : "), i_intSlaveError, Translate(""));
    l_strErrorRecovery = StrConcat4(l_strErrorRecovery, Translate(" - code : "), i_intErrorRecovery, Translate(""));
    l_intErrorValue = l_intErrorValue + i_intMainError;
    l_intErrorValue = l_intErrorValue + i_intSlaveError;
    l_intErrorValue = l_intErrorValue + i_intErrorRecovery;
    if (l_intErrorValue == 0)
    {
      o_strTranslatedAutoLoadInformaton = Translate("loading step ok.");
    }
    else
    {
      o_strTranslatedAutoLoadInformaton = StrConcat8(l_strMainError, Translate(" ; "), l_strSlaveError, Translate(" ; "), l_strErrorRecovery, Translate(""), Translate(""), Translate(""));
      Trace ("Main error : ", i_intMainError, " +++ Slave error : ", i_intSlaveError, " +++ Recovery button : ", i_intErrorRecovery);
    }
  }

  private function _DATA_MPH_ProvideSequence96Plate( sequence i_seqSequenceAspiration, sequence i_seqSequenceDispense, sequence & o_seqSequenceTempAspiration, sequence & o_seqSequenceTempDispense ) void {
    private variable l_strPositionID;
    private variable l_intIndexSubLoop;
    private variable l_strAlphaNumericPositionID;
    private variable l_intIndexMainLoop;
    private variable l_strLabwareIDInputSequenceDispense;
    private variable l_strIndexMainLoop;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable l_strLabwareIDInputSequenceAspiration;
    { sequence __temp; o_seqSequenceTempAspiration = __temp; }
    { sequence __temp; o_seqSequenceTempDispense = __temp; }
    SeqRemoveAll(o_seqSequenceTempAspiration);
    SeqRemoveAll(o_seqSequenceTempDispense);
    l_strLabwareIDInputSequenceAspiration = SeqGetLabwareId(i_seqSequenceAspiration);
    l_strLabwareIDInputSequenceDispense = SeqGetLabwareId(i_seqSequenceDispense);
    l_intIndexMainLoop = 0;
    {
      for(loopCounter2 = 0; loopCounter2 < 12;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_intIndexMainLoop = l_intIndexMainLoop + 1;
        l_intIndexSubLoop = 0;
        {
          for(loopCounter1 = 0; loopCounter1 < 8;)
          {
            loopCounter1 = loopCounter1 + 1;
            l_intIndexSubLoop = l_intIndexSubLoop + 1;
            if (l_intIndexSubLoop == 1)
            {
              l_strPositionID = Translate("A");
            }
            if (l_intIndexSubLoop == 2)
            {
              l_strPositionID = Translate("B");
            }
            if (l_intIndexSubLoop == 3)
            {
              l_strPositionID = Translate("C");
            }
            if (l_intIndexSubLoop == 4)
            {
              l_strPositionID = Translate("D");
            }
            if (l_intIndexSubLoop == 5)
            {
              l_strPositionID = Translate("E");
            }
            if (l_intIndexSubLoop == 6)
            {
              l_strPositionID = Translate("F");
            }
            if (l_intIndexSubLoop == 7)
            {
              l_strPositionID = Translate("G");
            }
            if (l_intIndexSubLoop == 8)
            {
              l_strPositionID = Translate("H");
            }
            l_strIndexMainLoop = StrIStr(l_intIndexMainLoop);
            l_strAlphaNumericPositionID = StrConcat2(l_strPositionID, l_strIndexMainLoop);
            SeqAdd(o_seqSequenceTempAspiration, l_strLabwareIDInputSequenceAspiration, l_strAlphaNumericPositionID);
            SeqAdd(o_seqSequenceTempDispense, l_strLabwareIDInputSequenceDispense, l_strAlphaNumericPositionID);
          }
        }
      }
    }
    o_seqSequenceTempAspiration.SetCurrentPosition(1);
    o_seqSequenceTempDispense.SetCurrentPosition(1);
    MECC::TraceComment(Translate("\nInput Sequences "));
    if(0){
      Util2::Debug::TraceSequence(i_seqSequenceAspiration);
      Util2::Debug::TraceSequence(i_seqSequenceDispense);
    }
    MECC::TraceComment(Translate("\nManipulated Sequences for MPH usage only"));
    if(0){
      Util2::Debug::TraceSequence(o_seqSequenceTempAspiration);
      Util2::Debug::TraceSequence(o_seqSequenceTempDispense);
    }
  }

  private function _Process_CleanUp_origFX2_3( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, sequence & i_seqPositionHHS, sequence & i_seqAspirationPositionEthanol, sequence & i_seqMagneticStandPosition, sequence & i_seqLiquidWaste, sequence & i_seqAspirationPositionResuspensionBuffer, variable i_fltVolumeEthanol, variable i_fltVolumeBeads, variable i_fltVolumeResuspensionBuffer, variable i_fltVolumeSupernatantToWaste, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMixing, variable i_strLiquidClassEthanol, variable i_strLiquidClassResuspensionBuffer, variable i_strLiquidClassSupernatantToWaste, variable i_strLiquidClassEthanolToWaste, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerDurationResuspendCleanedLibrary, variable i_intNumberOfColumnsWithinOneBatch, variable i_intShakerDevice, variable i_blnActivateBatchProcessForScaleUp, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver ) void {
    private sequence l_arrSequenceBatchProcessingCleanUp[];
    private variable l_intBatchCounter;
    private variable l_strBatchInformation;
    private variable l_intNumberOfCalculatedBatchesToBeProcessed;
    private variable l_strReadCurrentBarcode;
    private timer l_hdlOverdryingTimerAirDryingEthanol;
    private timer l_hdlTimerIncubationAfterResuspendation;
    private timer l_hdlTimerIncubationAvoidingBeadCarryOverAtMagneticStand;
    private sequence l_seqCurrentIntermediateBatch;
    private timer l_hdlTimerIncubationAtMagent;
    private timer l_hldTimerIncubationAfterShakingAtHeaterShaker;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Process_CleanUp <<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    DATA_UpdateInformationIntoReportFile(Translate("Process clean up"), ASWGLOBAL::BOOL::TRUE);
    _DATA_CalculateAndDefineBatchProcessCleanUp(i_intNumberOfColumnsWithinOneBatch, i_blnActivateBatchProcessForScaleUp, i_seqMagneticStandPosition, l_arrSequenceBatchProcessingCleanUp, l_intNumberOfCalculatedBatchesToBeProcessed);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      PIP_MixOnly(ML_STAR, i_seqMixPositionBeads, 0, i_strLiquidClassBeadsMixing, 6, 0);
      PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionBeads, i_seqPositionHHS, i_fltVolumeBeads, i_strLiquidClassBeads, 0, 0, 0, 0, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
    }
    _HHS_Shake(i_intShakerDevice, i_intShakerRPMBeadSampleMixing, i_intShakerDurationBeadSampleMixing);
    DATA_IncubationTimer(l_hldTimerIncubationAfterShakingAtHeaterShaker, i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, 1);
    Trp_MIDI(ML_STAR, i_seqPositionHHS, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    DATA_IncubationTimer(l_hdlTimerIncubationAtMagent, i_intTimeForSeparationAtMagneticStand, 1);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, i_seqMagneticStandPosition, i_seqLiquidWaste, i_fltVolumeSupernatantToWaste, i_strLiquidClassSupernatantToWaste);
    }
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _PIP_MultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPositionEthanol, i_seqMagneticStandPosition, i_fltVolumeEthanol, i_strLiquidClassEthanol, 6);
    }
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, i_seqMagneticStandPosition, i_seqLiquidWaste, 210, i_strLiquidClassEthanolToWaste);
    }
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _PIP_MultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPositionEthanol, i_seqMagneticStandPosition, i_fltVolumeEthanol, i_strLiquidClassEthanol, 6);
    }
    SeqRemoveAll(l_seqCurrentIntermediateBatch);
    {
      for(l_intBatchCounter = 0; l_intBatchCounter < l_intNumberOfCalculatedBatchesToBeProcessed;)
      {
        l_intBatchCounter = l_intBatchCounter + 1;
        l_seqCurrentIntermediateBatch=l_arrSequenceBatchProcessingCleanUp.GetAt(l_intBatchCounter-1);
        AlignSequences(hslTrue, l_seqCurrentIntermediateBatch, 1, i_seqMagneticStandPosition, 1);
        l_seqCurrentIntermediateBatch.SetCurrentPosition(1);
        if(0){
          TrcTraceSequence(l_seqCurrentIntermediateBatch);
        }
        l_strBatchInformation = StrConcat4(Translate("...batch "), l_intBatchCounter, Translate(" of "), l_intNumberOfCalculatedBatchesToBeProcessed);
        VectorCustomDialogs::AppendStatusText(l_strBatchInformation);
        DATA_IncubationTimer(l_hdlOverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, 2);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, l_seqCurrentIntermediateBatch, i_seqLiquidWaste, 210, i_strLiquidClassEthanolToWaste);
        }
        VectorCustomDialogs::AppendStatusText(Translate("Incubation bead air drying at magnetic stand"));
        l_seqCurrentIntermediateBatch.SetCurrentPosition(1);
        DATA_IncubationTimer(l_hdlOverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, 3);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionResuspensionBuffer, l_seqCurrentIntermediateBatch, i_fltVolumeResuspensionBuffer, i_strLiquidClassResuspensionBuffer, 0, i_fltVolumeResuspensionBuffer, 0, 0, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    Trp_MIDI(ML_STAR, i_seqMagneticStandPosition, i_seqPositionHHS, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    _HHS_Shake(i_intShakerDevice, i_intShakerRPMResuspendCleanedLibrary, i_intShakerDurationResuspendCleanedLibrary);
    DATA_IncubationTimer(l_hdlTimerIncubationAfterResuspendation, i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, 1);
    Trp_MIDI(ML_STAR, i_seqPositionHHS, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    DATA_IncubationTimer(l_hdlTimerIncubationAvoidingBeadCarryOverAtMagneticStand, i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver, 1);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Process_CleanUp <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _Process_SizeSelection_origFX2_3( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, sequence & i_seqLiquidWaste, sequence & i_seqPositionHHS, sequence & i_seqTransferPositionNewMidiPlate, sequence & i_seqAspirationPositionEthanol, sequence & i_seqAspirationPositionResuspensionBuffer, sequence & i_seqMagneticStandPosition, sequence & i_trpPositionMIDIWaste, variable i_strLiquidClassResuspensionBuffer, variable i_strLiquidClassEthanol, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMixing, variable i_fltVolumeTransferSupernatantDuringSizeSelection, variable i_fltVolumeEthanol, variable i_fltVolumeBeadsFirstSeparation, variable i_fltVolumeBeadsSecondSeparation, variable i_fltVolumeResuspensionBuffer, variable i_intShakerDevice, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationResuspendCleanedLibrary, variable i_blnActivateBatchProcessForScaleUp, variable i_intNumberOfColumnsWithinOneBatch, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver ) void {
    private sequence l_arrSequenceBatchProcessingCleanUp[];
    private variable l_intBatchCounter;
    private variable l_strBatchInformation;
    private variable l_intLoopCounterSizeSelectionCycle;
    private variable l_intNumberOfCalculatedBatchesToBeProcessed;
    private variable l_strConcatMessageASWStatusWindow;
    private variable l_strReadCurrentBarcode;
    private sequence l_seqCurrentIntermediateBatch;
    private timer l_hdlOverdryingTimerAirDryingEthanol;
    private timer l_hdlTimerIncubationAfterResuspendation;
    private timer l_hdlTimerIncubationAvoidingBeadCarryOverAtMagneticStand;
    private timer l_hdlTimerIncubationAtMagent;
    private timer l_hldTimerIncubationAfterShakingAtHeaterShaker;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Process_SizeSelection <<<<<<<<<"));
    Trace("++++  i_fltVolumeBeadsFirstSeparation",i_fltVolumeBeadsFirstSeparation," ++++++  i_fltVolumeBeadsSecondSeparation ",i_fltVolumeBeadsSecondSeparation);
    VectorCustomDialogs::Initialize();
    DATA_UpdateInformationIntoReportFile(Translate("Process size selection ..."), ASWGLOBAL::BOOL::TRUE);
    _DATA_CalculateAndDefineBatchProcessCleanUp(i_intNumberOfColumnsWithinOneBatch, i_blnActivateBatchProcessForScaleUp, i_seqMagneticStandPosition, l_arrSequenceBatchProcessingCleanUp, l_intNumberOfCalculatedBatchesToBeProcessed);
    {
      for(l_intLoopCounterSizeSelectionCycle = 0; l_intLoopCounterSizeSelectionCycle < 2;)
      {
        l_intLoopCounterSizeSelectionCycle = l_intLoopCounterSizeSelectionCycle + 1;
        l_strConcatMessageASWStatusWindow = StrConcat2(Translate("... magnetic size selection cycle number "), l_intLoopCounterSizeSelectionCycle);
        VectorCustomDialogs::AppendStatusText(l_strConcatMessageASWStatusWindow);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_MixOnly(ML_STAR, i_seqMixPositionBeads, 0, i_strLiquidClassBeadsMixing, 6, 0);
          if (l_intLoopCounterSizeSelectionCycle == 1)
          {
            PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionBeads, i_seqPositionHHS, i_fltVolumeBeadsFirstSeparation, i_strLiquidClassBeads, 0, 0, 0, 0, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
          }
          else
          {
            PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionBeads, i_seqPositionHHS, i_fltVolumeBeadsSecondSeparation, i_strLiquidClassBeads, 0, 0, 0, 0, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
          }
        }
        _HHS_Shake(i_intShakerDevice, i_intShakerRPMBeadSampleMixing, i_intShakerDurationBeadSampleMixing);
        DATA_IncubationTimer(l_hldTimerIncubationAfterShakingAtHeaterShaker, i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, 1);
        Trp_MIDI(ML_STAR, i_seqPositionHHS, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
        DATA_IncubationTimer(l_hdlTimerIncubationAtMagent, i_intTimeForSeparationAtMagneticStand, 1);
        if (l_intLoopCounterSizeSelectionCycle == 1)
        {
          if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
          {
            PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqMagneticStandPosition, i_seqTransferPositionNewMidiPlate, i_fltVolumeTransferSupernatantDuringSizeSelection, i_strLiquidClassBeads, 0, 0, 0, 0.7, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
          }
          Trp_MIDI(ML_STAR, i_seqMagneticStandPosition, i_trpPositionMIDIWaste, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
          Trp_MIDI(ML_STAR, i_seqTransferPositionNewMidiPlate, i_seqPositionHHS, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
        }
        else
        {
          if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
          {
            PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, i_seqMagneticStandPosition, i_seqLiquidWaste, 250, Translate("NGSStar_SVF_EthanolSupernatentToWaste_JetEmpty"));
          }
        }
      }
    }
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _PIP_MultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPositionEthanol, i_seqMagneticStandPosition, i_fltVolumeEthanol, i_strLiquidClassEthanol, 6);
    }
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, i_seqMagneticStandPosition, i_seqLiquidWaste, 210, Translate("NGSStar_SVF_EthanolSupernatentToWaste_JetEmpty"));
    }
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _PIP_MultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPositionEthanol, i_seqMagneticStandPosition, i_fltVolumeEthanol, i_strLiquidClassEthanol, 6);
    }
    SeqRemoveAll(l_seqCurrentIntermediateBatch);
    {
      for(l_intBatchCounter = 0; l_intBatchCounter < l_intNumberOfCalculatedBatchesToBeProcessed;)
      {
        l_intBatchCounter = l_intBatchCounter + 1;
        l_seqCurrentIntermediateBatch=l_arrSequenceBatchProcessingCleanUp.GetAt(l_intBatchCounter-1);
        AlignSequences(hslTrue, l_seqCurrentIntermediateBatch, 1, i_seqMagneticStandPosition, 1);
        l_seqCurrentIntermediateBatch.SetCurrentPosition(1);
        if(0){
          TrcTraceSequence(l_seqCurrentIntermediateBatch);
        }
        l_strBatchInformation = StrConcat4(Translate("...batch "), l_intBatchCounter, Translate(" of "), l_intNumberOfCalculatedBatchesToBeProcessed);
        VectorCustomDialogs::AppendStatusText(l_strBatchInformation);
        DATA_IncubationTimer(l_hdlOverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, 2);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, l_seqCurrentIntermediateBatch, i_seqLiquidWaste, 210, Translate("NGSStar_SVF_EthanolSupernatentToWaste_JetEmpty"));
        }
        VectorCustomDialogs::AppendStatusText(Translate("Incubation bead air drying at magnetic stand"));
        l_seqCurrentIntermediateBatch.SetCurrentPosition(1);
        DATA_IncubationTimer(l_hdlOverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, 3);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionResuspensionBuffer, l_seqCurrentIntermediateBatch, i_fltVolumeResuspensionBuffer, i_strLiquidClassResuspensionBuffer, 0, i_fltVolumeResuspensionBuffer, 0, 0, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    Trp_MIDI(ML_STAR, i_seqMagneticStandPosition, i_seqPositionHHS, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    _HHS_Shake(i_intShakerDevice, i_intShakerRPMResuspendCleanedLibrary, i_intShakerDurationResuspendCleanedLibrary);
    DATA_IncubationTimer(l_hdlTimerIncubationAfterResuspendation, i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, 1);
    Trp_MIDI(ML_STAR, i_seqPositionHHS, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    DATA_IncubationTimer(l_hdlTimerIncubationAvoidingBeadCarryOverAtMagneticStand, i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver, 1);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: Process_SizeSelection <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function PIP_DefragmentTipRacks( device & ML_STAR ) void {
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  PIP_DefragmentTipRacks<<<<<<<<<<"));
    STAR_TIP_TOOLS::DefragTipRacks1mL(ML_STAR, t_seqTips50);
    STAR_TIP_TOOLS::DefragTipRacks1mL(ML_STAR, t_seqTips300);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  PIP_DefragmentTipRacks<<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_ShowSequenceProperties( sequence & i_seqCheckSequence, variable i_intPresentationMode ) void {
    private variable l_strGetName;
    private variable l_strGetTotal;
    private variable l_intGetUsedPositions;
    private variable l_intGetTotal;
    private variable l_strTextGetMax;
    private variable l_strGetCurrentPositionID;
    private variable l_strGetCurrentLabwareID;
    private variable l_strGetMax;
    private variable l_intGetMax;
    private variable l_strGetUsedPositions;
    private variable l_strTextGetPositionID;
    private variable l_strTextGetLabwareID;
    private variable l_strTextGetTotal;
    private variable l_strTextGetName;
    private variable l_strTextGetUsedPositions;
    private variable l_arrListSequenceParameter[];
    private variable l_strSequenceParameterText;
    l_strTextGetTotal = Translate("Get total : ");
    l_intGetTotal = SeqGetTotal(i_seqCheckSequence);
    l_strGetTotal = StrIStr(l_intGetTotal);
    l_strTextGetTotal = StrConcat2(l_strTextGetTotal, l_strGetTotal);
    l_strTextGetUsedPositions = Translate("Get used positions : ");
    l_intGetUsedPositions = SeqGetUsedPositions(i_seqCheckSequence);
    l_strGetUsedPositions = StrIStr(l_intGetUsedPositions);
    l_strTextGetUsedPositions = StrConcat2(l_strTextGetUsedPositions, l_strGetUsedPositions);
    l_strTextGetPositionID = Translate("Get current position ID : ");
    l_strGetCurrentPositionID = SeqGetPositionId(i_seqCheckSequence);
    l_strTextGetPositionID = StrConcat2(l_strTextGetPositionID, l_strGetCurrentPositionID);
    l_strTextGetLabwareID = Translate("Get current labware ID : ");
    l_strGetCurrentLabwareID = SeqGetLabwareId(i_seqCheckSequence);
    l_strTextGetLabwareID = StrConcat2(l_strTextGetLabwareID, l_strGetCurrentLabwareID);
    l_strTextGetMax = Translate("Get max : ");
    l_intGetMax = SeqGetMax(i_seqCheckSequence);
    l_strGetMax = StrIStr(l_intGetMax);
    l_strTextGetMax = StrConcat2(l_strTextGetMax, l_strGetMax);
    l_strTextGetName = Translate("Get name : ");
    l_strGetName = SeqGetName(i_seqCheckSequence);
    l_strTextGetName = StrConcat2(l_strTextGetName, l_strGetName);
    l_arrListSequenceParameter.SetSize(0);
    l_arrListSequenceParameter.AddAsLast(l_strTextGetName);
    l_arrListSequenceParameter.AddAsLast(l_strTextGetMax);
    l_arrListSequenceParameter.AddAsLast(l_strTextGetTotal);
    l_arrListSequenceParameter.AddAsLast(l_strTextGetUsedPositions);
    l_arrListSequenceParameter.AddAsLast(l_strTextGetLabwareID);
    l_arrListSequenceParameter.AddAsLast(l_strTextGetPositionID);
    VectorCustomDialogs::Initialize();
    if (i_intPresentationMode == 1)
    {
      VectorCustomDialogs::ListDialog(Translate("Check sequence"), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::Ok, 0, 0, 5, Translate("All sequence parameter are listed below."), Translate("Press OK to continue."), l_arrListSequenceParameter);
    }
    if (i_intPresentationMode == 2)
    {
      VectorCustomDialogs::ShowStatusDialog(Translate("Analyze Sequence parameter"));
      l_strSequenceParameterText = StrConcat12(l_strTextGetName, Translate("; "), l_strTextGetMax, Translate("; "), l_strTextGetTotal, Translate("; "), l_strTextGetUsedPositions, Translate("; "), l_strTextGetLabwareID, Translate("; "), l_strTextGetPositionID, Translate("."));
      l_strSequenceParameterText = StrConcat2(Translate("Check sequence : "), l_strSequenceParameterText);
      VectorCustomDialogs::SetStatusText(l_strSequenceParameterText);
    }
    Util2::Debug::TraceArray(Translate("Check sequence parameter :"), l_arrListSequenceParameter);
  }

  function DATA_ShowArrayProperties( variable & i_arrayToBeAnalyzed[], variable i_intPresentationMode ) void {
    private variable l_strCurrentContentOfArrayToBeAnalyzed;
    private variable loopCounter1;
    private variable l_strShowArrayParameterSummary;
    private variable l_strUploadContentToListArray;
    private variable l_intSizeOfArrayToBeAnalyzed;
    private variable l_strShowArrayParameterText;
    private variable l_arrListArrayParameter[];
    l_intSizeOfArrayToBeAnalyzed=i_arrayToBeAnalyzed.GetSize();
    l_arrListArrayParameter.SetSize(0);
    l_strUploadContentToListArray = Translate("");
    l_strShowArrayParameterSummary = Translate("");
    {
      for(loopCounter1 = 0; loopCounter1 < l_intSizeOfArrayToBeAnalyzed;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_strCurrentContentOfArrayToBeAnalyzed=i_arrayToBeAnalyzed.GetAt(loopCounter1-1);
        l_strUploadContentToListArray = StrConcat4(Translate("Array content at index "), loopCounter1, Translate(" : "), l_strCurrentContentOfArrayToBeAnalyzed);
        l_arrListArrayParameter.AddAsLast(l_strUploadContentToListArray);
        l_strShowArrayParameterSummary = StrConcat4(l_strShowArrayParameterSummary, l_strUploadContentToListArray, Translate(" ; "), Translate(""));
      }
    }
    VectorCustomDialogs::Initialize();
    if (i_intPresentationMode == 1)
    {
      VectorCustomDialogs::ListDialog(Translate("Check array"), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::Ok, 0, 0, 5, Translate("All array parameter are listed below."), Translate("Press OK to continue."), l_arrListArrayParameter);
    }
    if (i_intPresentationMode == 2)
    {
      VectorCustomDialogs::ShowStatusDialog(Translate("Analyze Array parameter"));
      l_strShowArrayParameterText = StrConcat2(Translate("Check Array : "), l_strShowArrayParameterSummary);
      VectorCustomDialogs::SetStatusText(l_strShowArrayParameterText);
    }
    Util2::Debug::TraceArray(Translate("Check array parameter :"), l_arrListArrayParameter);
  }

  function DATA_ShowVariableProperties( variable i_strVariableName, variable i_varVariable, variable i_intPresentationMode ) void {
    private variable l_strSequenceParameterText;
    private variable l_strTextGetVariableType;
    private variable l_strVariableGetType;
    private variable l_strTextGetType;
    private variable l_strTextGetName;
    private variable l_strTextGetVariableContent;
    private variable l_strTextGetContent;
    private variable l_arrListVariableParameter[];
    private variable l_strTextGetVariableName;
    private variable l_strVariableParameterText;
    l_arrListVariableParameter.SetSize(0);
    l_strTextGetName = Translate("Get name : ");
    l_strTextGetVariableName = StrConcat2(l_strTextGetName, i_strVariableName);
    l_arrListVariableParameter.AddAsLast(l_strTextGetVariableName);
    l_strVariableGetType = StrGetType(i_varVariable);
    l_strTextGetType = Translate("Get type : ");
    if (l_strVariableGetType == "i")
    {
      l_strTextGetVariableType = StrConcat2(l_strTextGetType, Translate(" integer"));
    }
    if (l_strVariableGetType == "s")
    {
      l_strTextGetVariableType = StrConcat2(l_strTextGetType, Translate(" string"));
    }
    if (l_strVariableGetType == "f")
    {
      l_strTextGetVariableType = StrConcat2(l_strTextGetType, Translate(" float"));
    }
    if (l_strVariableGetType == "")
    {
      l_strTextGetVariableType = StrConcat2(l_strTextGetType, Translate(" no type adressable"));
    }
    l_arrListVariableParameter.AddAsLast(l_strTextGetVariableType);
    l_strTextGetContent = Translate("Get content : ");
    l_strTextGetVariableContent = StrConcat2(l_strTextGetContent, i_varVariable);
    l_arrListVariableParameter.AddAsLast(l_strTextGetVariableContent);
    VectorCustomDialogs::Initialize();
    if (i_intPresentationMode == 1)
    {
      VectorCustomDialogs::ListDialog(Translate("Check variable"), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::Ok, 0, 0, 5, Translate("All variable parameter are listed below."), Translate("Press OK to continue."), l_arrListVariableParameter);
    }
    if (i_intPresentationMode == 2)
    {
      VectorCustomDialogs::ShowStatusDialog(Translate("Analyze variable parameter"));
      l_strVariableParameterText = StrConcat12(l_strTextGetVariableName, Translate("; "), l_strTextGetVariableType, Translate("; "), l_strTextGetVariableContent, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("."));
      l_strSequenceParameterText = StrConcat2(Translate("Check variable : "), l_strVariableParameterText);
      VectorCustomDialogs::SetStatusText(l_strSequenceParameterText);
    }
    Util2::Debug::TraceArray(Translate("Check variable parameter :"), l_arrListVariableParameter);
  }

  function Process_RemoveSupernatantAndAddReagentInBatches( device & ML_STAR, sequence & i_seqDispensePlatePosition, sequence & i_seqAspirationPositionReagent, sequence & i_seqLiquidWaste, variable i_fltVolumeReagent, variable i_fltVolumeSupernatantToWaste, variable i_strLiquidClassReagent, variable i_strLiquidClassSupernatantToWaste, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirationHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnIncrementAspirationReagentSequence, variable i_intNumberOfColumnsWithinOneBatch, variable i_blnActivateLiquidFollowingDuringDispenseOnFixHeight, variable i_blnTipExchangeDuringDispenseOfReagents ) void {
    private variable l_intBatchCounter;
    private variable l_strBatchInformation;
    private variable l_intNumberOfCalculatedBatchesToBeProcessed;
    private sequence l_seqCurrentIntermediateBatch;
    private sequence l_arrSequenceBatchProcessing[];
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Process_RemoveSupernatantAndAddReagentInBatches <<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    DATA_UpdateInformationIntoReportFile(Translate("Process_RemoveSupernatantAndAddReagentInBatches"), ASWGLOBAL::BOOL::TRUE);
    _DATA_CalculateAndDefineBatchProcessCleanUp(i_intNumberOfColumnsWithinOneBatch, ASWGLOBAL::BOOL::TRUE, i_seqDispensePlatePosition, l_arrSequenceBatchProcessing, l_intNumberOfCalculatedBatchesToBeProcessed);
    SeqRemoveAll(l_seqCurrentIntermediateBatch);
    {
      for(l_intBatchCounter = 0; l_intBatchCounter < l_intNumberOfCalculatedBatchesToBeProcessed;)
      {
        l_intBatchCounter = l_intBatchCounter + 1;
        l_seqCurrentIntermediateBatch=l_arrSequenceBatchProcessing.GetAt(l_intBatchCounter-1);
        AlignSequences(hslTrue, l_seqCurrentIntermediateBatch, 1, i_seqDispensePlatePosition, 1);
        l_seqCurrentIntermediateBatch.SetCurrentPosition(1);
        l_strBatchInformation = StrConcat4(Translate("...batch "), l_intBatchCounter, Translate(" of "), l_intNumberOfCalculatedBatchesToBeProcessed);
        VectorCustomDialogs::AppendStatusText(l_strBatchInformation);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, l_seqCurrentIntermediateBatch, i_seqLiquidWaste, i_fltVolumeSupernatantToWaste, i_strLiquidClassSupernatantToWaste);
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionReagent, l_seqCurrentIntermediateBatch, i_fltVolumeReagent, i_strLiquidClassReagent, i_intMixCycles, i_fltVolumeMixAspiration, i_fltVolumeMixDispense, i_fltAspirationHeightFromBottom, i_fltDispenseHeightFromBottom, i_blnTipExchangeDuringDispenseOfReagents, i_blnIncrementAspirationReagentSequence, i_blnActivateLiquidFollowingDuringDispenseOnFixHeight);
        }
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Process_RemoveSupernatantAndAddReagentInBatches <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _PIP_MultidispenseFromTroughToPlate( device & ML_STAR, sequence & i_seqAspirationPosition, sequence & i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles ) void {
    private variable l_int_ReturnValueErrorDialog;
    private variable l_intMixCycles;
    private variable l_strStepReturnValueDispense;
    private variable l_indexChannelPatternDispense;
    private variable l_intReagentTroughCounter;
    private variable l_fltVolumeToBeAspiratedByIndividualChannel;
    private variable l_strStepReturnValueAspiration;
    private variable l_strChannelPatternAspirate;
    private variable l_loopCounterNumberOfDispenses;
    private variable l_fltTrackingReagentTroughlVolume;
    private variable l_intArrayIndex;
    private variable l_strLabwareIDAspiration;
    private variable l_intCurrentDispenseMode;
    private variable l_strTypeOfLabware;
    private variable l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop;
    private variable l_intCurrentTipType;
    private variable l_fltVolumeAspirateChannel1;
    private variable l_intGetSizeArrayVolumeAspiration;
    private variable l_intGetCurrentPositionOfSeqAspiration;
    private variable l_intDetermineNumberOfAvailableReagentTroughs;
    private variable loopCounter1;
    private variable l_fltMeasuredVolume_Channel1;
    private variable l_blnShowInsufficientLiquidDialog;
    private variable l_intNumberOfSamples;
    private variable l_strCurrentDispenseMode;
    private variable l_MainLoopCounterTransferLiquids;
    private variable l_intNumberOfUsedChannels;
    private variable l_intGetEndPositionOfSeqAspiration;
    private variable l_intGetCurrentPositionOfSeqAspirationAfterIncrementing;
    private variable l_intNumberOfDispenseLoops;
    private variable l_arrChannelPatternDispense[];
    private variable l_arrVolumeAspiration[];
    private variable l_arrMixingVolumes[];
    MECC::TraceComment(Translate("¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨\n>>>>>>>>>> Submethod:  _PIP_MultidispenseFromTroughToPlate<<<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_strLabwareIDAspiration = SeqGetLabwareId(i_seqAspirationPosition);
      if(0){
        l_intMixCycles = 6;
      }
      l_intMixCycles = i_intMixCycles;
      Trace ("mix cycles during aspiration:  ", l_intMixCycles);
      _DATA_InterpreteLabwareID(l_strLabwareIDAspiration, l_strTypeOfLabware);
      l_intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      Trace ("Current dispense mode:  ", l_strCurrentDispenseMode);
      l_indexChannelPatternDispense = 0;
      if (t_intNumberOfAllAvailableChannels > l_intNumberOfSamples)
      {
        l_intNumberOfUsedChannels = l_intNumberOfSamples;
      }
      else
      {
        l_intNumberOfUsedChannels = t_intNumberOfAllAvailableChannels;
      }
      if (l_strCurrentDispenseMode == "Part")
      {
        _DATA_ScheduleTips(i_seqDispensePosition, ASWGLOBAL::BOOL::FALSE, l_intCurrentTipType, ASWGLOBAL::BOOL::FALSE);
        if (l_intCurrentTipType == 5)
        {
          DATA_UpdateInformationIntoReportFile(Translate("...multi dispense using high volume tips activated..."), ASWGLOBAL::BOOL::TRUE);
          Trace ("Volume per well:  ", i_fltVolume);
          MECC::TraceComment(Translate("********** Fill plate  ..........."));
          if(0){
            TrcTraceSequence(i_seqDispensePosition);
          }
          {
            l_MainLoopCounterTransferLiquids = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, i_seqDispensePosition, 1, t_seqTips1000, 1);
              l_MainLoopCounterTransferLiquids = l_MainLoopCounterTransferLiquids + 1;
              ALIQUOT_FOR_EASYSTEPS_V2::CalcAliquot_v2_1(i_seqDispensePosition, i_fltVolume, 50, 50, 1000, l_intNumberOfDispenseLoops, t_intNumberOfAllAvailableChannels, t_intNumberOfAllAvailableChannels, l_arrVolumeAspiration, l_arrMixingVolumes, l_arrChannelPatternDispense, l_strChannelPatternAspirate);
              if (l_MainLoopCounterTransferLiquids == 1)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
              {
                l_blnShowInsufficientLiquidDialog = ASWGLOBAL::BOOL::FALSE;
                {
                  l_intReagentTroughCounter = 0;
                  while (1 == 1)
                  {
                    l_intReagentTroughCounter = l_intReagentTroughCounter + 1;
                    Trace("Current reagent trough number to aspirate requested liquid : ", l_intReagentTroughCounter);
                    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    l_fltMeasuredVolume_Channel1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, i_seqAspirationPosition, 0, Translate("10000000"), 0, 0, 0);
                    l_fltVolumeAspirateChannel1 = HSLML_STAR::GetContainerVolume(1);
                    l_fltVolumeAspirateChannel1 = l_fltVolumeAspirateChannel1 * 1000;
                    l_fltTrackingReagentTroughlVolume = l_fltVolumeAspirateChannel1;
                    if (t_blnSimulationModeON == 1)
                    {
                      l_fltTrackingReagentTroughlVolume = 12000;
                    }
                    Trace (">>> After the cLLD check, the reagent trough volume is:  ", l_fltTrackingReagentTroughlVolume);
                    l_intGetSizeArrayVolumeAspiration=l_arrVolumeAspiration.GetSize();
                    l_fltVolumeToBeAspiratedByIndividualChannel = 0;
                    l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop = 0;
                    {
                      for(l_intArrayIndex = 0; l_intArrayIndex < l_intGetSizeArrayVolumeAspiration;)
                      {
                        l_intArrayIndex = l_intArrayIndex + 1;
                        l_fltVolumeToBeAspiratedByIndividualChannel=l_arrVolumeAspiration.GetAt(l_intArrayIndex-1);
                        l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop = l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop + l_fltVolumeToBeAspiratedByIndividualChannel;
                      }
                    }
                    l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop = l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop + 3000;
                    if (l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop > l_fltTrackingReagentTroughlVolume)
                    {
                      MECC::TraceComment(Translate("***** Insufficient volume of current reagent trough.  Go to next reagent trough having the same reagent, if available. *****"));
                      l_intGetCurrentPositionOfSeqAspiration = i_seqAspirationPosition.GetCurrentPosition();
                      l_intGetEndPositionOfSeqAspiration = i_seqAspirationPosition.GetCount();
                      l_intDetermineNumberOfAvailableReagentTroughs = l_intGetEndPositionOfSeqAspiration / t_intNumberOfAllAvailableChannels;
                      if (l_intDetermineNumberOfAvailableReagentTroughs > 1)
                      {
                        MECC::TraceComment(Translate("***** Sequence incremented.  Going to next available reagent trough. Need to measure volume in new reagent trough - if available. *****"));
                        SeqIncrement(i_seqAspirationPosition, t_intNumberOfAllAvailableChannels);
                        l_intGetCurrentPositionOfSeqAspirationAfterIncrementing = i_seqAspirationPosition.GetCurrentPosition();
                        if (l_intGetCurrentPositionOfSeqAspirationAfterIncrementing == 0)
                        {
                        MECC::TraceComment(Translate("***** Insufficient volume of last available reagent trough.  No additional reagent trough available - USER interaction requested. *****"));
                        l_blnShowInsufficientLiquidDialog = ASWGLOBAL::BOOL::TRUE;
                        break;
                        }
                      }
                      else
                      {
                        MECC::TraceComment(Translate("***** Insufficient volume of curren reagent trough.  No additional reagent trough available - USER interaction requested. *****"));
                        l_blnShowInsufficientLiquidDialog = ASWGLOBAL::BOOL::TRUE;
                        break;
                      }
                    }
                    else
                    {
                      MECC::TraceComment(Translate("***** Enough volume of current reagent trough detected.  Let‘s pipette. *****"));
                      l_blnShowInsufficientLiquidDialog = ASWGLOBAL::BOOL::FALSE;
                      break;
                    }
                  }
                }
                if (l_blnShowInsufficientLiquidDialog == ASWGLOBAL::BOOL::TRUE)
                {
                  VectorCustomDialogs::Initialize();
                  l_int_ReturnValueErrorDialog = VectorCustomDialogs::ErrorDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 600, Translate("Insufficient liquid for current reagent detected. "), Translate("Refill 1st available reagent trough and press OK to continue. Selectng Cancel will lead to an inacurate liquid transfer. Timeout of 600 seconds will be interpreted as selecting  CANCEL as well."));
                  Trace("Return Value Error Dialog : ",l_int_ReturnValueErrorDialog);
                  if (l_int_ReturnValueErrorDialog != 1)
                  {
                    MECC::TraceComment(Translate("User pressed CANCEL or TIMEOUT occured --> no manipulation of asiration sequence takes place - aspiration step might lead to an error recovered by user"));
                  }
                  else
                  {
                    MECC::TraceComment(Translate("User pressed ok and refilled trough --> reset current position of asiration sequence to 1"));
                    i_seqAspirationPosition.SetCurrentPosition(1);
                  }
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              l_indexChannelPatternDispense = 0;
              {
                for(l_loopCounterNumberOfDispenses = 0; l_loopCounterNumberOfDispenses < l_intNumberOfDispenseLoops;)
                {
                  l_loopCounterNumberOfDispenses = l_loopCounterNumberOfDispenses + 1;
                  if(0){
                    Trace ("SubLoopCounter during Multidispense :  ", l_loopCounterNumberOfDispenses);
                  }
                  l_indexChannelPatternDispense = l_indexChannelPatternDispense + 1;
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	l_strStepReturnValueDispense = arrRetValues[2];
                  }
                  _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
                }
              }
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            t_seqTips1000.SetMax(t_seqTips1000.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
          DATA_TipCounterWrite(ML_STAR);
          _EjectTips(ML_STAR, ML_STAR.Waste08);
        }
        if (l_intCurrentTipType == 1)
        {
          Trace ("Volume per well:  ", i_fltVolume);
          MECC::TraceComment(Translate("********** Fill plate  ..........."));
          if(0){
            TrcTraceSequence(i_seqDispensePosition);
          }
          {
            l_MainLoopCounterTransferLiquids = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, i_seqDispensePosition, 1, t_seqTips300, 1);
              l_MainLoopCounterTransferLiquids = l_MainLoopCounterTransferLiquids + 1;
              ALIQUOT_FOR_EASYSTEPS_V2::CalcAliquot_v2_1(i_seqDispensePosition, i_fltVolume, 10, 10, 300, l_intNumberOfDispenseLoops, t_intNumberOfAllAvailableChannels, t_intNumberOfAllAvailableChannels, l_arrVolumeAspiration, l_arrMixingVolumes, l_arrChannelPatternDispense, l_strChannelPatternAspirate);
              if (l_MainLoopCounterTransferLiquids == 1)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
              {
                l_blnShowInsufficientLiquidDialog = ASWGLOBAL::BOOL::FALSE;
                {
                  l_intReagentTroughCounter = 0;
                  while (1 == 1)
                  {
                    l_intReagentTroughCounter = l_intReagentTroughCounter + 1;
                    Trace("Current reagent trough number to aspirate requested liquid : ", l_intReagentTroughCounter);
                    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    l_fltMeasuredVolume_Channel1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, i_seqAspirationPosition, 0, Translate("10000000"), 0, 0, 0);
                    l_fltVolumeAspirateChannel1 = HSLML_STAR::GetContainerVolume(1);
                    l_fltVolumeAspirateChannel1 = l_fltVolumeAspirateChannel1 * 1000;
                    l_fltTrackingReagentTroughlVolume = l_fltVolumeAspirateChannel1;
                    if (t_blnSimulationModeON == 1)
                    {
                      l_fltTrackingReagentTroughlVolume = 12000;
                    }
                    Trace (">>> After the cLLD check, the reagent trough volume is:  ", l_fltTrackingReagentTroughlVolume);
                    l_intGetSizeArrayVolumeAspiration=l_arrVolumeAspiration.GetSize();
                    l_fltVolumeToBeAspiratedByIndividualChannel = 0;
                    l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop = 0;
                    {
                      for(l_intArrayIndex = 0; l_intArrayIndex < l_intGetSizeArrayVolumeAspiration;)
                      {
                        l_intArrayIndex = l_intArrayIndex + 1;
                        l_fltVolumeToBeAspiratedByIndividualChannel=l_arrVolumeAspiration.GetAt(l_intArrayIndex-1);
                        l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop = l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop + l_fltVolumeToBeAspiratedByIndividualChannel;
                      }
                    }
                    l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop = l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop + 3000;
                    if (l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop > l_fltTrackingReagentTroughlVolume)
                    {
                      MECC::TraceComment(Translate("***** Insufficient volume of current reagent trough.  Go to next reagent trough having the same reagent, if available. *****"));
                      l_intGetCurrentPositionOfSeqAspiration = i_seqAspirationPosition.GetCurrentPosition();
                      l_intGetEndPositionOfSeqAspiration = i_seqAspirationPosition.GetCount();
                      l_intDetermineNumberOfAvailableReagentTroughs = l_intGetEndPositionOfSeqAspiration / t_intNumberOfAllAvailableChannels;
                      if (l_intDetermineNumberOfAvailableReagentTroughs > 1)
                      {
                        MECC::TraceComment(Translate("***** Sequence incremented.  Going to next available reagent trough. Need to measure volume in new reagent trough - if available. *****"));
                        SeqIncrement(i_seqAspirationPosition, t_intNumberOfAllAvailableChannels);
                        l_intGetCurrentPositionOfSeqAspirationAfterIncrementing = i_seqAspirationPosition.GetCurrentPosition();
                        if (l_intGetCurrentPositionOfSeqAspirationAfterIncrementing == 0)
                        {
                        MECC::TraceComment(Translate("***** Insufficient volume of last available reagent trough.  No additional reagent trough available - USER interaction requested. *****"));
                        l_blnShowInsufficientLiquidDialog = ASWGLOBAL::BOOL::TRUE;
                        break;
                        }
                      }
                      else
                      {
                        MECC::TraceComment(Translate("***** Insufficient volume of curren reagent trough.  No additional reagent trough available - USER interaction requested. *****"));
                        l_blnShowInsufficientLiquidDialog = ASWGLOBAL::BOOL::TRUE;
                        break;
                      }
                    }
                    else
                    {
                      MECC::TraceComment(Translate("***** Enough volume of current reagent trough detected.  Let‘s pipette. *****"));
                      l_blnShowInsufficientLiquidDialog = ASWGLOBAL::BOOL::FALSE;
                      break;
                    }
                  }
                }
                if (l_blnShowInsufficientLiquidDialog == ASWGLOBAL::BOOL::TRUE)
                {
                  VectorCustomDialogs::Initialize();
                  l_int_ReturnValueErrorDialog = VectorCustomDialogs::ErrorDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 600, Translate("Insufficient liquid for current reagent detected. "), Translate("Refill 1st available reagent trough and press OK to continue. Selectng Cancel will lead to an inacurate liquid transfer. Timeout of 600 seconds will be interpreted as selecting  CANCEL as well."));
                  Trace("Return Value Error Dialog : ",l_int_ReturnValueErrorDialog);
                  if (l_int_ReturnValueErrorDialog != 1)
                  {
                    MECC::TraceComment(Translate("User pressed CANCEL or TIMEOUT occured --> no manipulation of asiration sequence takes place - aspiration step might lead to an error recovered by user"));
                  }
                  else
                  {
                    MECC::TraceComment(Translate("User pressed ok and refilled trough --> reset current position of asiration sequence to 1"));
                    i_seqAspirationPosition.SetCurrentPosition(1);
                  }
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              l_indexChannelPatternDispense = 0;
              {
                for(l_loopCounterNumberOfDispenses = 0; l_loopCounterNumberOfDispenses < l_intNumberOfDispenseLoops;)
                {
                  l_loopCounterNumberOfDispenses = l_loopCounterNumberOfDispenses + 1;
                  if(0){
                    Trace ("SubLoopCounter during Multidispense :  ", l_loopCounterNumberOfDispenses);
                  }
                  l_indexChannelPatternDispense = l_indexChannelPatternDispense + 1;
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	l_strStepReturnValueDispense = arrRetValues[2];
                  }
                  _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
                }
              }
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            t_seqTips300.SetMax(t_seqTips300.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
          _EjectTips(ML_STAR, ML_STAR.Waste08);
        }
        if (l_intCurrentTipType == 23)
        {
          Trace ("Volume per well:  ", i_fltVolume);
          MECC::TraceComment(Translate("********** Fill plate  ..........."));
          if(0){
            TrcTraceSequence(i_seqDispensePosition);
          }
          {
            l_MainLoopCounterTransferLiquids = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1, i_seqDispensePosition, 1, t_seqTips50, 1);
              l_MainLoopCounterTransferLiquids = l_MainLoopCounterTransferLiquids + 1;
              ALIQUOT_FOR_EASYSTEPS_V2::CalcAliquot_v2_1(i_seqDispensePosition, i_fltVolume, 5, 5, 50, l_intNumberOfDispenseLoops, t_intNumberOfAllAvailableChannels, t_intNumberOfAllAvailableChannels, l_arrVolumeAspiration, l_arrMixingVolumes, l_arrChannelPatternDispense, l_strChannelPatternAspirate);
              if (l_MainLoopCounterTransferLiquids == 1)
              {
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
              {
                l_blnShowInsufficientLiquidDialog = ASWGLOBAL::BOOL::FALSE;
                {
                  l_intReagentTroughCounter = 0;
                  while (1 == 1)
                  {
                    l_intReagentTroughCounter = l_intReagentTroughCounter + 1;
                    Trace("Current reagent trough number to aspirate requested liquid : ", l_intReagentTroughCounter);
                    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    l_fltMeasuredVolume_Channel1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, i_seqAspirationPosition, 0, Translate("10000000"), 0, 0, 0);
                    l_fltVolumeAspirateChannel1 = HSLML_STAR::GetContainerVolume(1);
                    l_fltVolumeAspirateChannel1 = l_fltVolumeAspirateChannel1 * 1000;
                    l_fltTrackingReagentTroughlVolume = l_fltVolumeAspirateChannel1;
                    if (t_blnSimulationModeON == 1)
                    {
                      l_fltTrackingReagentTroughlVolume = 12000;
                    }
                    Trace (">>> After the cLLD check, the reagent trough volume is:  ", l_fltTrackingReagentTroughlVolume);
                    l_intGetSizeArrayVolumeAspiration=l_arrVolumeAspiration.GetSize();
                    l_fltVolumeToBeAspiratedByIndividualChannel = 0;
                    l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop = 0;
                    {
                      for(l_intArrayIndex = 0; l_intArrayIndex < l_intGetSizeArrayVolumeAspiration;)
                      {
                        l_intArrayIndex = l_intArrayIndex + 1;
                        l_fltVolumeToBeAspiratedByIndividualChannel=l_arrVolumeAspiration.GetAt(l_intArrayIndex-1);
                        l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop = l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop + l_fltVolumeToBeAspiratedByIndividualChannel;
                      }
                    }
                    l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop = l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop + 3000;
                    if (l_fltVolumeAspirateAllActiveChannelsCurrentAliquotLoop > l_fltTrackingReagentTroughlVolume)
                    {
                      MECC::TraceComment(Translate("***** Insufficient volume of current reagent trough.  Go to next reagent trough having the same reagent, if available. *****"));
                      l_intGetCurrentPositionOfSeqAspiration = i_seqAspirationPosition.GetCurrentPosition();
                      l_intGetEndPositionOfSeqAspiration = i_seqAspirationPosition.GetCount();
                      l_intDetermineNumberOfAvailableReagentTroughs = l_intGetEndPositionOfSeqAspiration / t_intNumberOfAllAvailableChannels;
                      if (l_intDetermineNumberOfAvailableReagentTroughs > 1)
                      {
                        MECC::TraceComment(Translate("***** Sequence incremented.  Going to next available reagent trough. Need to measure volume in new reagent trough - if available. *****"));
                        SeqIncrement(i_seqAspirationPosition, t_intNumberOfAllAvailableChannels);
                        l_intGetCurrentPositionOfSeqAspirationAfterIncrementing = i_seqAspirationPosition.GetCurrentPosition();
                        if (l_intGetCurrentPositionOfSeqAspirationAfterIncrementing == 0)
                        {
                        MECC::TraceComment(Translate("***** Insufficient volume of last available reagent trough.  No additional reagent trough available - USER interaction requested. *****"));
                        l_blnShowInsufficientLiquidDialog = ASWGLOBAL::BOOL::TRUE;
                        break;
                        }
                      }
                      else
                      {
                        MECC::TraceComment(Translate("***** Insufficient volume of curren reagent trough.  No additional reagent trough available - USER interaction requested. *****"));
                        l_blnShowInsufficientLiquidDialog = ASWGLOBAL::BOOL::TRUE;
                        break;
                      }
                    }
                    else
                    {
                      MECC::TraceComment(Translate("***** Enough volume of current reagent trough detected.  Let‘s pipette. *****"));
                      l_blnShowInsufficientLiquidDialog = ASWGLOBAL::BOOL::FALSE;
                      break;
                    }
                  }
                }
                if (l_blnShowInsufficientLiquidDialog == ASWGLOBAL::BOOL::TRUE)
                {
                  if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
                  {
                    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
                    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  }
                  VectorCustomDialogs::Initialize();
                  l_int_ReturnValueErrorDialog = VectorCustomDialogs::ErrorDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 600, Translate("Insufficient liquid for current reagent detected. "), Translate("Open the front cover manually, unload the carrier, refill 1st available reagent trough - reload the carrier, close the front coverand and press OK to continue. Selectng Cancel will lead to an inacurate liquid transfer. Timeout of 600 seconds will be interpreted as selecting  CANCEL as well."));
                  Trace("Return Value Error Dialog : ",l_int_ReturnValueErrorDialog);
                  if (l_int_ReturnValueErrorDialog != 1)
                  {
                    MECC::TraceComment(Translate("User pressed CANCEL or TIMEOUT occured --> no manipulation of asiration sequence takes place - aspiration step might lead to an error recovered by user"));
                  }
                  else
                  {
                    MECC::TraceComment(Translate("User pressed ok and refilled trough --> reset current position of asiration sequence to 1"));
                    i_seqAspirationPosition.SetCurrentPosition(1);
                  }
                  if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
                  {
                    {
                      loopCounter1 = 0;
                      while (1 == 1)
                      {
                        loopCounter1 = loopCounter1 + 1;
                        onerror goto errLabel_22 ;
                        err.Clear();
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        break;
                        errLabel_22 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
                        }   /* end if from skip handler if no error */
                      }
                    }
                    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
                  }
                }
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              l_indexChannelPatternDispense = 0;
              {
                for(l_loopCounterNumberOfDispenses = 0; l_loopCounterNumberOfDispenses < l_intNumberOfDispenseLoops;)
                {
                  l_loopCounterNumberOfDispenses = l_loopCounterNumberOfDispenses + 1;
                  if(0){
                    Trace ("SubLoopCounter during Multidispense :  ", l_loopCounterNumberOfDispenses);
                  }
                  l_indexChannelPatternDispense = l_indexChannelPatternDispense + 1;
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    	l_strStepReturnValueDispense = arrRetValues[2];
                  }
                  _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
                }
              }
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              DATA_TipCounterWrite(ML_STAR);
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            t_seqTips50.SetMax(t_seqTips50.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
            i_seqDispensePosition.SetCurrentPosition(1);
          }
          _EjectTips(ML_STAR, ML_STAR.Waste08);
        }
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, i_seqAspirationPosition);
      {
        variable _FilterIdsArray_23[];
        variable _ColumnIdsArray_23[];
        variable _ColumnNamesArray_23[];
        variable _ExperimentsArray_23[];
        _FilterIdsArray_23.SetSize(0);
        _ColumnNamesArray_23.SetSize(14);
        _ColumnIdsArray_23.SetSize(14);
        _ColumnNamesArray_23.SetAt(0, "RecordId");
        _ColumnIdsArray_23.SetAt(0, 0);
        _ColumnNamesArray_23.SetAt(1, "TRackBC");
        _ColumnIdsArray_23.SetAt(1, 1);
        _ColumnNamesArray_23.SetAt(2, "TLabwareId");
        _ColumnIdsArray_23.SetAt(2, 2);
        _ColumnNamesArray_23.SetAt(3, "TPositionId");
        _ColumnIdsArray_23.SetAt(3, 3);
        _ColumnNamesArray_23.SetAt(4, "TPositionBC");
        _ColumnIdsArray_23.SetAt(4, 4);
        _ColumnNamesArray_23.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_23.SetAt(5, 5);
        _ColumnNamesArray_23.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_23.SetAt(6, 6);
        _ColumnNamesArray_23.SetAt(7, "TVolume");
        _ColumnIdsArray_23.SetAt(7, 7);
        _ColumnNamesArray_23.SetAt(8, "SRackBC");
        _ColumnIdsArray_23.SetAt(8, 8);
        _ColumnNamesArray_23.SetAt(9, "SLabwareId");
        _ColumnIdsArray_23.SetAt(9, 9);
        _ColumnNamesArray_23.SetAt(10, "SPositionId");
        _ColumnIdsArray_23.SetAt(10, 10);
        _ColumnNamesArray_23.SetAt(11, "SPositionBC");
        _ColumnIdsArray_23.SetAt(11, 11);
        _ColumnNamesArray_23.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_23.SetAt(12, 12);
        _ColumnNamesArray_23.SetAt(13, "UserName");
        _ColumnIdsArray_23.SetAt(13, 13);
        _ExperimentsArray_23.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqDispensePosition, 3, _FilterIdsArray_23, 0, _ColumnIdsArray_23, _ColumnNamesArray_23, _ExperimentsArray_23, "Multidispense_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  _PIP_HVFTMultidispenseFromTroughToPlate <<<<<<<<<<\n-----------------------------------------------------------------------------------------------------------------------------------------------------------"));
  }

  function Process_MixAndAddReagentInBatches( device & ML_STAR, sequence & i_seqDispensePlatePosition, sequence & i_seqAspirationPositionReagent, variable i_fltVolumeReagent, variable i_strLiquidClassReagent, variable i_strLiquidClassMix, variable i_intMixCyclesUponMixOnly, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirationHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnIncrementAspirationReagentSequence, variable i_intNumberOfColumnsWithinOneBatch, variable i_blnActivateLiquidFollowingDuringDispenseOnFixHeight, variable i_blnTipExchangeDuringDispenseOfReagents ) void {
    private sequence l_arrSequenceBatchProcessing[];
    private variable l_intBatchCounter;
    private variable l_strBatchInformation;
    private variable l_intNumberOfCalculatedBatchesToBeProcessed;
    private sequence l_seqCurrentIntermediateBatch;
    private variable l_fltVolumeMixAspirationUponMixOnly;
    private variable l_intDispenseModeMixOnly;
    private variable l_intNumberOfContainersAspiration;
    private variable l_intTipTypeMixOnly;
    private variable l_intRemainingSampleNumber;
    private variable l_intUsedSampleNumber;
    private variable l_strPositionID;
    private variable loopCounter1;
    private variable l_intTotalPositionsInSequence;
    private variable l_intCurrentPositionInSequence;
    private variable l_arrAspirationPositions[];
    private variable l_arrDistinctAspirationPositions[];
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Process_MixAndAddReagentInBatches <<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    DATA_UpdateInformationIntoReportFile(Translate("Process_MixAndAddReagentInBatches"), ASWGLOBAL::BOOL::TRUE);
    _DATA_CalculateAndDefineBatchProcessCleanUp(i_intNumberOfColumnsWithinOneBatch, ASWGLOBAL::BOOL::TRUE, i_seqDispensePlatePosition, l_arrSequenceBatchProcessing, l_intNumberOfCalculatedBatchesToBeProcessed);
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassMix, l_intTipTypeMixOnly, l_intDispenseModeMixOnly);
    SeqRemoveAll(l_seqCurrentIntermediateBatch);
    l_intTotalPositionsInSequence = i_seqAspirationPositionReagent.GetCount();
    l_intCurrentPositionInSequence = i_seqAspirationPositionReagent.GetCurrentPosition();
    l_arrAspirationPositions.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < l_intTotalPositionsInSequence;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_strPositionID = SeqGetPositionId(i_seqAspirationPositionReagent);
        l_arrAspirationPositions.AddAsLast(l_strPositionID);
        SeqIncrement(i_seqAspirationPositionReagent, 1);
      }
    }
    l_intNumberOfContainersAspiration=l_arrAspirationPositions.GetSize();
    ARRAYTOOLS::get_distinct_from_array(l_arrAspirationPositions, l_arrDistinctAspirationPositions);
    l_intNumberOfContainersAspiration=l_arrDistinctAspirationPositions.GetSize();
    i_seqAspirationPositionReagent.SetCurrentPosition(l_intCurrentPositionInSequence);
    {
      for(l_intBatchCounter = 0; l_intBatchCounter < l_intNumberOfCalculatedBatchesToBeProcessed;)
      {
        l_intBatchCounter = l_intBatchCounter + 1;
        l_seqCurrentIntermediateBatch=l_arrSequenceBatchProcessing.GetAt(l_intBatchCounter-1);
        AlignSequences(hslTrue, l_seqCurrentIntermediateBatch, 1, i_seqDispensePlatePosition, 1);
        l_seqCurrentIntermediateBatch.SetCurrentPosition(1);
        l_strBatchInformation = StrConcat4(Translate("...batch "), l_intBatchCounter, Translate(" of "), l_intNumberOfCalculatedBatchesToBeProcessed);
        VectorCustomDialogs::AppendStatusText(l_strBatchInformation);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          l_intTotalPositionsInSequence = i_seqDispensePlatePosition.GetCount();
          l_intUsedSampleNumber = l_intBatchCounter - 1;
          l_intUsedSampleNumber = l_intUsedSampleNumber * i_intNumberOfColumnsWithinOneBatch;
          l_intUsedSampleNumber = l_intUsedSampleNumber * 8;
          l_intRemainingSampleNumber = l_intTotalPositionsInSequence - l_intUsedSampleNumber;
          l_fltVolumeMixAspirationUponMixOnly = l_intRemainingSampleNumber * i_fltVolumeReagent;
          l_fltVolumeMixAspirationUponMixOnly = l_fltVolumeMixAspirationUponMixOnly * 0.8;
          l_fltVolumeMixAspirationUponMixOnly = l_fltVolumeMixAspirationUponMixOnly / (l_intNumberOfContainersAspiration * 1.0);
          if (l_intTipTypeMixOnly == 5)
          {
            if (l_fltVolumeMixAspirationUponMixOnly > 1000)
            {
              l_fltVolumeMixAspirationUponMixOnly = 800;
            }
          }
          else
          {
            if (l_intTipTypeMixOnly == 1)
            {
              if (l_fltVolumeMixAspirationUponMixOnly > 300)
              {
                l_fltVolumeMixAspirationUponMixOnly = 240;
              }
            }
            else
            {
              if (l_intTipTypeMixOnly == 23)
              {
                l_fltVolumeMixAspirationUponMixOnly = 40;
              }
            }
          }
          PIP_MixOnly(ML_STAR, i_seqAspirationPositionReagent, i_fltAspirationHeightFromBottom, i_strLiquidClassMix, i_intMixCyclesUponMixOnly, l_fltVolumeMixAspirationUponMixOnly);
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionReagent, l_seqCurrentIntermediateBatch, i_fltVolumeReagent, i_strLiquidClassReagent, i_intMixCycles, i_fltVolumeMixAspiration, i_fltVolumeMixDispense, i_fltAspirationHeightFromBottom, i_fltDispenseHeightFromBottom, i_blnTipExchangeDuringDispenseOfReagents, i_blnIncrementAspirationReagentSequence, i_blnActivateLiquidFollowingDuringDispenseOnFixHeight);
        }
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Process_MixAndAddReagentInBatches <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function Process_ShakeAndTransferSamplesInBatches( device & ML_STAR, sequence & i_seqDispensePlatePosition, sequence & i_seqAspirationPlatePosition, variable i_fltVolumeReagent, variable i_strLiquidClassReagent, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirationHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_intNumberOfColumnsWithinOneBatch, variable i_intHHS, variable i_intSpeed, variable i_intShakingDuration, variable i_blnIncrementAspirationReagentSequence, variable i_blnActivateLiquidFollowingDuringDispenseOnFixHeight, variable i_blnTipExchangeDuringDispenseOfReagents ) void {
    private sequence l_arrSequenceBatchProcessing[];
    private variable l_intBatchCounter;
    private variable l_strBatchInformation;
    private variable l_intNumberOfCalculatedBatchesToBeProcessed;
    private sequence l_seqCurrentIntermediateBatch;
    private sequence l_arrSequenceBatchProcessingAspiration[];
    private sequence l_seqCurrentIntermediateBatchAspiration;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Process_ShakeAndTransferSamplesInBatches <<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    DATA_UpdateInformationIntoReportFile(Translate("Process_ShakeAndTransferSamplesInBatches"), ASWGLOBAL::BOOL::TRUE);
    _DATA_CalculateAndDefineBatchProcessCleanUp(i_intNumberOfColumnsWithinOneBatch, ASWGLOBAL::BOOL::TRUE, i_seqDispensePlatePosition, l_arrSequenceBatchProcessing, l_intNumberOfCalculatedBatchesToBeProcessed);
    _DATA_CalculateAndDefineBatchProcessCleanUp(i_intNumberOfColumnsWithinOneBatch, ASWGLOBAL::BOOL::TRUE, i_seqAspirationPlatePosition, l_arrSequenceBatchProcessingAspiration, l_intNumberOfCalculatedBatchesToBeProcessed);
    SeqRemoveAll(l_seqCurrentIntermediateBatch);
    {
      for(l_intBatchCounter = 0; l_intBatchCounter < l_intNumberOfCalculatedBatchesToBeProcessed;)
      {
        l_intBatchCounter = l_intBatchCounter + 1;
        l_seqCurrentIntermediateBatch=l_arrSequenceBatchProcessing.GetAt(l_intBatchCounter-1);
        AlignSequences(hslTrue, l_seqCurrentIntermediateBatch, 1, i_seqDispensePlatePosition, 1);
        l_seqCurrentIntermediateBatch.SetCurrentPosition(1);
        l_seqCurrentIntermediateBatchAspiration=l_arrSequenceBatchProcessingAspiration.GetAt(l_intBatchCounter-1);
        AlignSequences(hslTrue, l_seqCurrentIntermediateBatchAspiration, 1, i_seqAspirationPlatePosition, 1);
        l_seqCurrentIntermediateBatchAspiration.SetCurrentPosition(1);
        l_strBatchInformation = StrConcat4(Translate("...batch "), l_intBatchCounter, Translate(" of "), l_intNumberOfCalculatedBatchesToBeProcessed);
        VectorCustomDialogs::AppendStatusText(l_strBatchInformation);
        if (l_intBatchCounter != 1)
        {
          if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
          {
            _HHS_Shake(i_intHHS, i_intSpeed, i_intShakingDuration);
            _HHS_Shake(i_intHHS, 800, 10);
          }
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, l_seqCurrentIntermediateBatchAspiration, l_seqCurrentIntermediateBatch, i_fltVolumeReagent, i_strLiquidClassReagent, i_intMixCycles, i_fltVolumeMixAspiration, i_fltVolumeMixDispense, i_fltAspirationHeightFromBottom, i_fltDispenseHeightFromBottom, i_blnTipExchangeDuringDispenseOfReagents, i_blnIncrementAspirationReagentSequence, i_blnActivateLiquidFollowingDuringDispenseOnFixHeight);
        }
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Process_ShakeAndTransferSamplesInBatches <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function Process_CleanUp_HSP( device & ML_STAR, sequence & i_seqAspirationPositionBeads, sequence & i_seqMixPositionBeads, sequence & i_seqPositionHHS, sequence & i_seqAspirationPositionEthanol, sequence & i_seqMagneticStandPosition, sequence & i_seqLiquidWaste, sequence & i_seqAspirationPositionResuspensionBuffer, sequence & i_seqIntermediateHSPPosition, sequence & i_seqPositionHHS_HSP, sequence & i_seqMIDIwaste, variable i_fltVolumeEthanol, variable i_fltVolumeBeads, variable i_fltVolumeResuspensionBuffer, variable i_fltVolumeSupernatantToWaste, variable i_fltVolumeTransferMIDItoHSPIntermediate, variable i_strLiquidClassBeads, variable i_strLiquidClassBeadsMixing, variable i_strLiquidClassEthanol, variable i_strLiquidClassResuspensionBuffer, variable i_strLiquidClassSupernatantToWaste, variable i_strLiquidClassEthanolToWaste, variable i_intShakerRPMBeadSampleMixing, variable i_intShakerRPMResuspendCleanedLibrary, variable i_intShakerDurationBeadSampleMixing, variable i_intShakerDurationResuspendCleanedLibrary, variable i_intNumberOfColumnsWithinOneBatch, variable i_intShakerDevice, variable i_blnActivateBatchProcessForScaleUp, variable i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, variable i_intTimeForSeparationAtMagneticStand, variable i_intTimeForAirDryingProcessAtMagneticStand, variable i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, variable i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver ) void {
    private sequence l_arrSequenceBatchProcessingCleanUp[];
    private variable l_strLabwareIDAspiration;
    private variable l_strTypeOfLabware;
    private variable l_intBatchCounter;
    private variable l_strBatchInformation;
    private variable l_intNumberOfCalculatedBatchesToBeProcessed;
    private variable l_strReadCurrentBarcode;
    private variable l_blnActivateIncrementSequence;
    private timer l_hdlOverdryingTimerAirDryingEthanol;
    private timer l_hdlTimerIncubationAtMagent;
    private timer l_hldTimerIncubationAfterShakingAtHeaterShaker;
    private timer l_hdlTimerIncubationAfterResuspendation;
    private timer l_hdlTimerIncubationAvoidingBeadCarryOverAtMagneticStand;
    private sequence l_seqCurrentIntermediateBatch;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  Process_CleanUp_HSP <<<<<<<<<"));
    VectorCustomDialogs::Initialize();
    DATA_UpdateInformationIntoReportFile(Translate("Process clean up using HSP"), ASWGLOBAL::BOOL::TRUE);
    _DATA_CalculateAndDefineBatchProcessCleanUp(i_intNumberOfColumnsWithinOneBatch, i_blnActivateBatchProcessForScaleUp, i_seqMagneticStandPosition, l_arrSequenceBatchProcessingCleanUp, l_intNumberOfCalculatedBatchesToBeProcessed);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      l_strLabwareIDAspiration = SeqGetLabwareId(i_seqAspirationPositionBeads);
      _DATA_InterpreteLabwareID(l_strLabwareIDAspiration, l_strTypeOfLabware);
      if (l_strTypeOfLabware == "tube")
      {
        l_blnActivateIncrementSequence = ASWGLOBAL::BOOL::TRUE;
      }
      if (l_strTypeOfLabware == "trough")
      {
        l_blnActivateIncrementSequence = ASWGLOBAL::BOOL::FALSE;
      }
      PIP_MixOnly(ML_STAR, i_seqMixPositionBeads, 0, i_strLiquidClassBeadsMixing, 10, 0);
      PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionBeads, i_seqPositionHHS, i_fltVolumeBeads, i_strLiquidClassBeads, 0, 0, 0, 0, 1, ASWGLOBAL::BOOL::TRUE, l_blnActivateIncrementSequence, ASWGLOBAL::BOOL::FALSE);
    }
    _HHS_Shake(i_intShakerDevice, i_intShakerRPMBeadSampleMixing, i_intShakerDurationBeadSampleMixing);
    PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqPositionHHS, i_seqIntermediateHSPPosition, i_fltVolumeTransferMIDItoHSPIntermediate, i_strLiquidClassBeads, 0, 0, 0, 0, 1, ASWGLOBAL::BOOL::TRUE, l_blnActivateIncrementSequence, ASWGLOBAL::BOOL::TRUE);
    DATA_IncubationTimer(l_hldTimerIncubationAfterShakingAtHeaterShaker, i_intTimeForIncubationBeadSampleMixBeforeMagneticSeparation, 1);
    Trp_MIDI(ML_STAR, i_seqPositionHHS, i_seqMIDIwaste, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, l_strReadCurrentBarcode, 4);
    Trp_HSP(ML_STAR, i_seqIntermediateHSPPosition, i_seqMagneticStandPosition, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    DATA_IncubationTimer(l_hdlTimerIncubationAtMagent, i_intTimeForSeparationAtMagneticStand, 1);
    SeqRemoveAll(l_seqCurrentIntermediateBatch);
    {
      for(l_intBatchCounter = 0; l_intBatchCounter < l_intNumberOfCalculatedBatchesToBeProcessed;)
      {
        l_intBatchCounter = l_intBatchCounter + 1;
        l_seqCurrentIntermediateBatch=l_arrSequenceBatchProcessingCleanUp.GetAt(l_intBatchCounter-1);
        AlignSequences(hslTrue, l_seqCurrentIntermediateBatch, 1, i_seqMagneticStandPosition, 1);
        l_seqCurrentIntermediateBatch.SetCurrentPosition(1);
        if(0){
          TrcTraceSequence(l_seqCurrentIntermediateBatch);
        }
        l_strBatchInformation = StrConcat4(Translate("...batch "), l_intBatchCounter, Translate(" of "), l_intNumberOfCalculatedBatchesToBeProcessed);
        VectorCustomDialogs::AppendStatusText(l_strBatchInformation);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, l_seqCurrentIntermediateBatch, i_seqLiquidWaste, i_fltVolumeSupernatantToWaste, i_strLiquidClassSupernatantToWaste);
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          _PIP_MultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPositionEthanol, l_seqCurrentIntermediateBatch, i_fltVolumeEthanol, i_strLiquidClassEthanol, 6);
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, l_seqCurrentIntermediateBatch, i_seqLiquidWaste, 190, i_strLiquidClassEthanolToWaste);
        }
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          _PIP_MultidispenseFromTroughToPlate(ML_STAR, i_seqAspirationPositionEthanol, l_seqCurrentIntermediateBatch, i_fltVolumeEthanol, i_strLiquidClassEthanol, 6);
        }
        DATA_IncubationTimer(l_hdlOverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, 2);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, l_seqCurrentIntermediateBatch, i_seqLiquidWaste, 190, i_strLiquidClassEthanolToWaste);
        }
        VectorCustomDialogs::AppendStatusText(Translate("Incubation bead air drying at magnetic stand"));
        l_seqCurrentIntermediateBatch.SetCurrentPosition(1);
        DATA_IncubationTimer(l_hdlOverdryingTimerAirDryingEthanol, i_intTimeForAirDryingProcessAtMagneticStand, 3);
        if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
        {
          PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, i_seqAspirationPositionResuspensionBuffer, l_seqCurrentIntermediateBatch, i_fltVolumeResuspensionBuffer, i_strLiquidClassResuspensionBuffer, 0, 0, 0, 0, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    Trp_HSP(ML_STAR, i_seqMagneticStandPosition, i_seqPositionHHS_HSP, 0, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    _HHS_Shake(i_intShakerDevice, i_intShakerRPMResuspendCleanedLibrary, i_intShakerDurationResuspendCleanedLibrary);
    _HHS_Shake(i_intShakerDevice, 800, 10);
    DATA_IncubationTimer(l_hdlTimerIncubationAfterResuspendation, i_intTimeIncubationBeadSampleMixAfterResupendingCleanedLibrary, 1);
    Trp_HSP(ML_STAR, i_seqPositionHHS_HSP, i_seqMagneticStandPosition, 0, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
    DATA_IncubationTimer(l_hdlTimerIncubationAvoidingBeadCarryOverAtMagneticStand, i_intTimeIncubationCleanedLibraryAtMagneticStandAvoidingBeadCarryOver, 1);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Process_CleanUp_HSP <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }
} // library namespace
