 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\\Library\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\\Library\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "HSLAppsLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\\Library\\InitWorkListLocation.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "VectorCustomDialogs\\VectorCustomDialogs.hsl" }
 namespace _Method { #include "AssignColorScheme\\ColorSchemeLibrary.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\\Library\\NGSStarLoading\\NGSStarLoading.hs_" }
 namespace _Method { #include "Stack_Reducer\\StackReducer.hs_" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\\Library\\NGSStarLoading\\NGSStarLoading.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\\Library\\NGSStarLoading\\NGSStarLoading.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\\Library\\NGSStarLoading\\NGSStarLoading.hs_" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\\Library\\Tools\\Tools_Library.hs_" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\\Library\\NGSStarLoading\\ARW_Global.hsl" }
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\\Methods\\UltraIIRNALibraryPrepKit_Channels.res"
sequence t_seqMlStarSequenceNotUsed;
sequence t_seqMIDI_OnMagnet;
sequence t_seqHSP_Pipette;
sequence t_trpHSP_ODTC;
sequence t_trpHSP_Pipette;
sequence t_trpHamiltonComfortLidODTC;
sequence t_trp_Stack1;
sequence t_trpHamiltonComfortLidStackParkPos;
sequence t_trp_Stack4;
sequence t_trpHSP_Pipette2;
sequence t_trpMIDI_Pipette;
sequence t_trpMIDI_OnMagnet;
sequence t_trpHSP_Waste;
sequence t_trpMIDI_Waste;
sequence t_seqMIDI_Pipette;
sequence t_seqHSP_Pipette2;
sequence t_trpHamiltonComfortLidWaste;
variable t_intHHS1_HSP1;
variable t_intHHS2_HSP2;
variable t_intHHS3_HSP3_MIDI3;
variable t_intHHS4_MIDI1;
variable t_intHHS5_MIDI2;
variable t_arrIndex1IDs[];
variable t_arrIndex1PositionIDs[];
variable t_arrIndex2IDs[];
variable t_arrIndex2PositionIDs[];
variable t_arrSamplePositionIDs[];
variable t_arrAdapterLigatioPlateLabwareID[];
variable t_arrAdapterLigationPlatePositionIDs[];
variable t_blnODTCused;
variable t_blnSendEmails;
variable t_strSerialNumberMLStar;
variable t_intSelectedIndexSTART;
variable t_intSelectedIndexSTOP;
variable t_strLocalIPAddressOfComputer;
variable t_strEmailAdress;
variable t_strDeviceAddressODTC;
variable t_intNumberOfSamplesFromFile;
variable t_intDeviceNumberODTC;
variable t_blnTestODTCWithShortDummyProtocol;
variable t_fltDiscardSupernatant_M1;
variable t_strODTCFolderXML;
variable t_blnShortenPreheat;
sequence t_seqHHS3_MIDI;
sequence t_trpHHS3_MIDI;
sequence t_trpHSP_OnMagnet;
sequence t_seqHSP_OnMagnet;
variable t_arrBlnProcessActivation[];
variable t_fltVolumeSSSMastermix;
variable t_fltVolumeTEBuffer_Process01;
variable t_fltVolumeEthanol80_2_Process01;
variable t_blnSkipLoadingRoutine;
variable t_fltVolumeFSSMastermix;
variable t_fltVolumeEthanol80_1_Process01;
variable t_fltVolumeAMPureBeads_Process01;
sequence t_seqAspirate_TEBuffer;
sequence t_seqAspirate_SSSMastermix;
sequence t_seqAspirate_FSRMastermix;
sequence t_seqAspirate_FSSMastermix;
sequence t_seqAspirate_AMPureBeads;
sequence t_seqAspirate_Ethanol80;
sequence t_seq_IndexPlate_Pipette;
sequence t_trp_IndexPlate_Pipette;
variable t_intRequestIDForActiveProtocol;
variable t_intTimeForProtocol;
variable t_blnStoreHSPoverNightWithinODTC;
variable t_blnStoreAtRoomTemperature;
variable t_blnSimulationMode;
variable t_blnUseMPHInsteadOfChannels;
variable t_strFullPathReportFile;
sequence t_arrTipAdapters[];
variable t_blnReduceDeckTo4ChannelSystem;
variable t_strODTCProtocolFragmentation;
variable t_strODTCProtocol1stStrandcDNASynthesis;
variable t_blnMeasureVolumeWithinTroughs;
variable t_fltVolumeDNASEIDigestionMastermix;
variable t_fltVolumeHybridizationMastermix;
variable t_fltVolumeRNASEHDigestionMastermix;
variable t_fltVolumeAgencourtRNACleanXPBeads;
variable t_intRequiredNumberOf1000uLTipsM4;
variable t_intRequiredNumberOf300uLTipsM4;
variable t_intRequiredNumberOf50uLTipsM4;
variable t_fltVolumeFSRMastermixProcess2and3;
sequence t_seqAspirate_FragmentationMastermix;
variable t_intRequiredNumberOf300uLTipsM2;
variable t_intRequiredNumberOf300uLTipsM3;
variable t_intRequiredNumberOf50uLTipsM2;
variable t_intRequiredNumberOf50uLTipsM3;
variable t_intRequiredNumberOf1000uLTipsM2;
variable t_intRequiredNumberOf1000uLTipsM3;
sequence t_seqAspirate_HybridizationMastermix;
sequence t_seqAspirate_RNASEHDigestionMastermix;
sequence t_seqAspirate_DNASEIDigestionMastermix;
sequence t_seqAspirate_AgencourtBeads;
variable t_fltDiscardSupernatant_M2;
variable l_intLengthEmailAddress;
variable t_strKitName;
variable t_strKitProvider;
variable t_intRequiredNumberOf300uLTipsFinalCleanUp;
variable t_intRequiredNumberOf1000uLTipsFinalCleanUp;
variable t_intRequiredNumberOf50uLTipsFinalCleanUp;
variable t_intRequiredNumberOf300uLTipsFinalCleanUpP1;
variable t_bln_rRNA_Depletion_v2UsedInsteadOf_v1;
//global device ML_STAR ("NEBNextUltraIIRNALibraryPrepKit.lay", "ML_STAR", hslTrue);
variable t_strTipCounterNameTip300;
variable t_blnDeactivatePipettingSteps;
variable t_blnActivateLockUnlockSystem;
variable t_str_PlatformUsed;
variable t_strTipCounterNameTip50;
variable t_strHamiltonDirectory;
variable t_str_KitTitle;
variable t_intMaxPlatesPerStackHSP;
variable t_intMaxPlatesPerStackMIDI;
variable t_str_KitSupplier;
variable t_strTipCounterNameTip1000;
variable t_intMaxComfortLidPerStack;
variable l_intPlatformUsed;
sequence t_seqAspirate_HybridizationMastermix_distinct;
sequence t_seqAspirate_FSSMastermix_distinct;
sequence t_seqAspirate_FSRMastermix_distinct;
sequence t_seqAspirate_Ethanol80_distinct;
sequence t_seqAspirate_RNASEHDigestionMastermix_distinct;
sequence t_seqAspirate_DNASEIDigestionMastermix_distinct;
sequence t_seqAspirate_FragmentationMastermix_distinct;
sequence t_seqAspirate_AMPureBeads_distinct;
sequence t_seqAspirate_SSSMastermix_distinct;
sequence t_seqAspirate_TEBuffer_distinct;
sequence t_seqAspirate_AgencourtBeads_distinct;
global device ML_STAR ("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\\Methods\\UltraIIRNALibraryPrepKit_Channels.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable l_intCOREGripper(2); // Choose transport tool CORE Gripper to perform transport steps with CORE gripper instead of iswap. Value = 2
    private variable l_intISWAP(1); // Choose Transport tool iswap with a value of 1
    private variable l_strChannelPatternAbort;
    private variable l_intResultTipCheck;
    private variable l_intTransportTool;
    private variable l_int_OptionSelected;
    private variable l_blnShowUVGUI;
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIP_PRESENT_CHECK_5ML_1ML::_InitLibrary();
    NGSSTARPREP::_InitLibrary();
    NGSSTARPROCESSES::_InitLibrary();
    COLORSCHEMELIBRARY::_InitLibrary();
    NGSSTARLOADING::_InitLibrary();
    STACKREDUCER::_InitLibrary();
    TOOLS_LIBRARY::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDirectionalRNALibraryPrepKit\nBy:          Stephan Grosch, Lucas Durandi, Camilo Gomez, Hamilton Bonaduz AG, Switzerland \nDate:      30-03-2022\nVersion:  1.0.2\n\nBased on  Reference Guide (NEB #E7760S/L, #E7765S/L  Version Version 3.0_10/19)\n\nVersion Notes: ++++++rRNADepletion only+++++Section 2++++++\n\nCRH - Hamilton UK\n1.Fixed issue with overnight storage in ODTC when option to cool is selected\n2.Fixed issue with an MPH liquid class that was being used for bead mixing in a trough\n3.Fixed some isseues with MPH pipetting logic where inaccesable positions were selected\n\nVersioning : see at tab Version\n\n\n\n*************************************************************************************************************************************"));
    t_strTipCounterNameTip50 = Translate("50F_Counter");
    t_strTipCounterNameTip300 = Translate("SVF_Counter");
    t_strTipCounterNameTip1000 = Translate("1000F_Counter");
    t_blnSkipLoadingRoutine = ASWGLOBAL::BOOL::FALSE;
    t_blnDeactivatePipettingSteps = ASWGLOBAL::BOOL::FALSE;
    t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::FALSE;
    t_blnReduceDeckTo4ChannelSystem = ASWGLOBAL::BOOL::FALSE;
    t_blnActivateLockUnlockSystem = ASWGLOBAL::BOOL::FALSE;
    t_bln_rRNA_Depletion_v2UsedInsteadOf_v1 = ASWGLOBAL::BOOL::TRUE;
    t_blnMeasureVolumeWithinTroughs = ASWGLOBAL::BOOL::FALSE;
    l_blnShowUVGUI = ASWGLOBAL::BOOL::FALSE;
    t_strHamiltonDirectory = Translate("C:\\Program Files (x86)\\Hamilton\\");
    t_str_KitSupplier = Translate("NEB");
    t_str_KitTitle = Translate("UltraIIDirectionalRNALibraryPrepKit_rRNADepletion");
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      t_str_PlatformUsed = Translate("ClinicalNGSStarlet");
      l_intPlatformUsed = 2;
      t_intMaxPlatesPerStackMIDI = 3;
      t_intMaxPlatesPerStackHSP = 5;
      t_intMaxComfortLidPerStack = 5;
    }
    else
    {
      t_str_PlatformUsed = Translate("NGSStar");
      l_intPlatformUsed = 1;
      t_intMaxPlatesPerStackMIDI = 4;
      t_intMaxPlatesPerStackHSP = 4;
      t_intMaxComfortLidPerStack = 8;
    }
    INIT_WORKLIST_LOCATION::LockLibrary();
    t_blnSimulationMode = Util::GetSimulationMode();
    t_strSerialNumberMLStar = GetSerialNumber(ML_STAR);
    NGSSTARPREP::DATA_HandOverSimulationModeForAllLocalSMTs(t_blnSimulationMode, l_blnShowUVGUI);
    if(0){
      l_intTransportTool = l_intISWAP;
    }
    l_intTransportTool = l_intCOREGripper;
    t_strEmailAdress = Translate("Type in your email adress");
    t_blnODTCused = ASWGLOBAL::BOOL::TRUE;
    t_blnTestODTCWithShortDummyProtocol = ASWGLOBAL::BOOL::TRUE;
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      t_strDeviceAddressODTC = "192.168.1.50";
      t_strLocalIPAddressOfComputer = "192.168.1.1";
    }
    else
    {
      t_strDeviceAddressODTC = "No ODTC used";
    }
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    COLORSCHEMELIBRARY::Assign(0);
    VectorCustomDialogs::Initialize();
    VectorCustomDialogs::ShowStatusDialog(Translate("NEBNext Ultra II Directional RNA Library Prep Kit for Illumina"));
    VectorCustomDialogs::SetStatusText(Translate("Run Preparation..."));
    VectorCustomDialogs::SetStatusText(Translate("   Initializing Liquid Waste Sensor..."));
    if(0){
      NGSSTARPREP::LiquidWasteSensor_Init(2);
    }
    VectorCustomDialogs::SetStatusText(Translate("   Initializing CPAC chiller..."));
    NGSSTARPREP::CPAC_Init();
    NGSSTARPREP::CPAC_SetTemperature(8);
    VectorCustomDialogs::SetStatusText(Translate("   Initializing Hamilton Heater Shakers (HHSs)..."));
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::HHS_Init(t_intHHS3_HSP3_MIDI3, t_intHHS2_HSP2, t_intHHS1_HSP1, t_intHHS4_MIDI1, t_intHHS5_MIDI2, Translate("TCC"), Translate("0"), Translate("0"), Translate("0"), Translate("0"), ML_STAR);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS3_HSP3_MIDI3, 0);
    }
    else
    {
      NGSSTARPREP::HHS_Init(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2, Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), ML_STAR);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS1_HSP1, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS2_HSP2, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS3_HSP3_MIDI3, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS4_MIDI1, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS5_MIDI2, 0);
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_Init(t_strDeviceAddressODTC, t_intDeviceNumberODTC, t_strLocalIPAddressOfComputer);
    }
    if(0){
      NGSSTARLOADING::Display_SelectEmailAddress_Dialog(t_strEmailAdress);
      l_intLengthEmailAddress = StrGetLength(t_strEmailAdress);
      if (l_intLengthEmailAddress > 0)
      {
        t_blnSendEmails = ASWGLOBAL::BOOL::TRUE;
      }
    }
    t_strKitProvider = Translate("NEB");
    t_strKitName = Translate("NEBNextUltraIIDirectionalRNALibraryPrepKit");
    NGSSTARPROCESSES::DATA_HandoverSequencesAndDataToSMT(ML_STAR, l_intTransportTool, t_strKitProvider, t_strKitName, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, t_strEmailAdress, ASWGLOBAL::BOOL::FALSE, t_strFullPathReportFile, t_arrTipAdapters, t_blnUseMPHInsteadOfChannels);
    NGSSTARLOADING::DATA_HandOverDataToSMT_NGSStarLoading(t_strFullPathReportFile, l_intPlatformUsed, t_str_KitSupplier, t_str_KitTitle, t_blnUseMPHInsteadOfChannels, t_blnActivateLockUnlockSystem, t_strTipCounterNameTip50, t_strTipCounterNameTip300, t_strTipCounterNameTip1000, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ASWGLOBAL::BOOL::FALSE);
    _SelectProcesses();
    SeqRemoveAll(t_seqMlStarSequenceNotUsed);
    t_arrTipAdapters.SetSize(3);
    VectorCustomDialogs::SetStatusText(Translate("   Resources required..."));
    _CalculateAndLoadConsumables();
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process_rRNADepletionKit();
      Process_Fragmentation1st2ndStrandcDNASynthesisPurification();
    }
    if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
    {
      ProcessX_StoreHSPWithinODTCOverNight(t_trpHSP_Pipette2, t_blnStoreAtRoomTemperature);
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to unload all carriers?"), Translate("Yes"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to unload all carriers?"), Translate("No"));
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to defragment the tip racks?"), Translate("Yes"));
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to defragment the tip racks?"), Translate("No"));
    }
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Check your system"), Translate("1) Check / empty the tip waste, "));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Check your system"), Translate("2) Check / empty the liquid waste container,"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Check your system"), Translate("3) Remove and store reagents and created plates."));
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(5);
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(5, Translate("Do you want to defragment the tip racks?"), l_int_OptionSelected);
      if (l_int_OptionSelected == 1)
      {
        VectorCustomDialogs::SetStatusText(Translate("Defragment the tip racks..."));
        NGSSTARPROCESSES::PIP_DefragmentTipRacks(ML_STAR);
      }
    }
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(5, Translate("Do you want to unload all carriers?"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      VectorCustomDialogs::SetStatusText(Translate("Unloading the deck..."));
      MECC::TraceComment(Translate("***** Unload Carriers *****"));
      if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      else
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
    }
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    VectorCustomDialogs::SetStatusText(Translate(" ииииииииииииии METHOD COMPLETED ииииииииииииии "));
    VectorCustomDialogs::SetStatusText(Translate("Preparing for run shutdown..."));
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::PIP_CleanUpTipAdapter(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    }
    NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::HHS_Terminate(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2);
    NGSSTARPREP::CPAC_Terminate();
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
    }
    l_intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, l_strChannelPatternAbort, 8);
    if (l_intResultTipCheck == 1)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    VectorCustomDialogs::Terminate();
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("Workflow completed"), Translate("All selected processes have been completed successfully. Clean the deck and empty the liquid waste."));
    }
    TIP_PRESENT_CHECK_5ML_1ML::_ExitLibrary();
    NGSSTARPREP::_ExitLibrary();
    NGSSTARPROCESSES::_ExitLibrary();
    COLORSCHEMELIBRARY::_ExitLibrary();
    NGSSTARLOADING::_ExitLibrary();
    STACKREDUCER::_ExitLibrary();
    TOOLS_LIBRARY::_ExitLibrary();
  } }
