private function ProcessX_StoreHSPWithinODTCOverNight( sequence & i_trpHSP, variable i_blnIncubateODTCWithoutActiveCooling ) void ;
private function Process_Fragmentation1st2ndStrandcDNASynthesisPurification(  ) void ;
private function Process_rRNADepletionKit(  ) void ;
private function _CalculateAndLoadConsumables(  ) void ;
private function _SelectProcesses(  ) void ;
private function _VersionHistory(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private variable l_strChannelPatternAbort;
  private variable l_intResultTipCheck;
  private variable l_retValueDialog;
  private variable l_arrEndDialogListInformation[];
  VectorCustomDialogs::SetStatusText(Translate("ĿĿĿĿĿĿĿĿMETHOD ABORTEDĿĿĿĿĿĿĿĿ"));
  if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_SendEmail(Translate("Method aborted"), Translate("Read report file and logfile. Clean the deck and empty the liquid waste."));
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_Terminate(t_intDeviceNumberODTC, ASWGLOBAL::BOOL::TRUE);
  }
  NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  l_arrEndDialogListInformation.SetSize(0);
  l_arrEndDialogListInformation.AddAsLast(Translate("1) Check / empty the tip waste, "));
  l_arrEndDialogListInformation.AddAsLast(Translate("2) Check / empty the liquid waste container,"));
  l_arrEndDialogListInformation.AddAsLast(Translate("3) Remove and store reagents and created plates."));
  l_retValueDialog = VectorCustomDialogs::ListDialog(Translate("Method aborted."), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 60, Translate(""), Translate("Press OK to terminate all active devices and close the method."), l_arrEndDialogListInformation);
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  NGSSTARPREP::HHS_Terminate(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2);
  NGSSTARPREP::CPAC_Terminate();
  l_intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, l_strChannelPatternAbort, 8);
  if (l_intResultTipCheck == 1)
  {
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  else
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  VectorCustomDialogs::Terminate();
}

private function _VersionHistory(  ) void {
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      April 28, 2020\nVersion:  0.01\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19)\n\nVersion Notes:\n1. Tab SelectProcesses, Grouping (Precool / Preheat the ODTC for the planned processes), Description of GINIT protocol was changed.\n2. Tab SelectProcesses, Grouping (Precool / Preheat the ODTC for the planned processes), New Init Protocols were included depending to the Starting Process. \n3. If the starting point is the process (Process_Fragmentation1st2ndStrandcDNASynthesisPurification) there is no need to cool down the HSP with samples. CG inactivated this step adn included the command (ODTC_WaitForStartedProtocolToFinish) in Grouping (ODTC Preparation), Inside Grouping (Fragmentation)\n4. Check Fragmentation and Size selection options shown for all processes as it will be used everywhere\n5. Open door during termination of ODTC in main method and on abort\n6. Reduce stacker (StackReducer) command for lids : increased max stack lids number from 4 to 8\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      April 30, 2020\nVersion:  0.02\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19)\n\nVersion Notes:\n1. Process (Process_Fragmentation1st2ndStrandcDNASynthesisPurification), in Grouping (Fragmentation) a (If Loop) was included to decide if incubation on Magnet is needed when samples come from Process 1 (Process_PolyAmRNAmagneticIsolationModule) and has been fragmented in combination with magnetic beads. \n2. Process (Process_Fragmentation1st2ndStrandcDNASynthesisPurification), in Grouping (Second Strand cDNA Synthesis). After second strand synthesis has been performed on ODTC temperatured is not controlled any longer. (Not active to avoid energy consumption and noise) this was changed in Scritp \"2ndStrandcDNASynthesis\" not in the Method.\n3. Process (ProcessX_StoreHSPWithinODTCOverNight), Grouping (Long term storage), Grouping (ODTC Preparations), Grouping (Execution of the protocol), an initialization step to prepare the ODTC after loading a new protocol, and a (ODTC_WaitForStartedProtocolToFinish) step was included.  \n4. Process (CalculateAndLoadConsumables), Load carrier of Troughs, before was set this carrier was not (Loadable), It was changed from False to True. \n5.  Process (CalculateAndLoadConsumables), Resources for \"Process03: PolyA-enriched or rRNA depleted RNA\", previously 3 MIDI plates were required, now is corrected to only 1 MIDI Plate.\n6.  Process (Process_Fragmentation1st2ndStrandcDNASynthesisPurification), Grouping (Fragmentation), Grouping (Execution of the protocol),  During ODTC incubation, a remaining MIDI on HHS3 is discarded, but only if Process 1 has been performed. \n7.  Process (Process_Fragmentation1st2ndStrandcDNASynthesisPurification), Grouping (First Strand cDNA Synthesis), Grouping (Execution of the protocol). During ODTC incubation, a remaining HSP on Magnet is discarded, but only if Process 1 has been performed. \n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      May 06, 2020\nVersion:  0.03\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Process_DistributeFragmentationMix included\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      May 07, 2020\nVersion:  0.05\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Process_rRNADepletionKit included\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      May 07, 2020\nVersion:  0.05\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Deck layout, carrier properties, edit properties, was added: ( MlStarReadBarcodeOnPositions, \"1=TIP1;2=TIP2\" )\n2. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, Grouping: First Strand cDNA Synthesis, PIP_ReagentsFromTubeOrTroughOrPlateToPlate, aspiration high = 0 and dispense hight = 1.5 were inverted, now it is corrected.  \n3. Liquid class used in all Clean Up steps when discarding EtOH to waste, was changed to \"\"NEBNext_RNA_II_SVF_EthanolToWaste2ndAspiration_JetEmpty_CG\"\"\n4. Process_rRNADepletionKit, Process_CleanUp with 8 channels and MPH, liquid class to provide 7 uL of RSB was changed to : \"NEBNext_RNA_II_SVF_RSB_SurfaceEmpty_V2\"\n5. Process_rRNADepletionKit, final transfer from elueted sample from MIDI_OnMagnet to Pipette_2, PIP_ReagentsFromTubeOrTroughOrPlateToPlate, Liquid class was changed to : \"NEBNext_RNA_II_50F_CleanSample_SurfaceEmpty_ElutionRNAdepleted\". \n6. Process_rRNADepletionKit, final transfer from elueted sample from MIDI_OnMagnet to Pipette_2, PIP_ReagentsFromTubeOrTroughOrPlateToPlate, Aspirated high was changed from 1 to 1.2, dispense high was changed from 1 to 0.7, both MPH and 8 Channels. \n7. Process_rRNADepletionKit, final Clean Up, liquid class for resuspension buffer was changed to: \"NEBNext_RNA_II_50F_CleanSample_SurfaceEmpty_ElutionRNAdepleted\"\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      May 08, 2020\nVersion:  0.06\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. _SelectProcesses, Grouping \"Precool / Preheat the ODTC for the planned processes\", a new Init protocol was added for Process 2 \"Process_rRNADepletionKit\",  script \"Init_Block20CLid105C\"\n2. Process_rRNADepletionKit, gruoping \"Probe Hybridization to RNA\" was created to gather corresponding steps inside it. \n3.  Process_rRNADepletionKit, gruoping \"Probe Hybridization to RNA\", grouping \"Preheat for next operation\", protocol name was changed to \"Reset22Cto20CLid55C\"\n4. Process_rRNADepletionKit, gruoping \"RNAse H Digestion\" was created to gather corresponding steps inside it.\n5.  Process_rRNADepletionKit, gruoping \"RNAse H Digestion\", grouping \"Preheat for next operation\", protocol name was changed to \"Reset50Cto20CLid40C\"\n6. Process_rRNADepletionKit, gruoping \"DNAse I Digestion\" was created to gather corresponding steps inside it.\n7. Process_rRNADepletionKit, gruoping \"DNAse I Digestion\", grouping \"Preheat for next operation\", protocol name was changed to \"Reset37Cto20CLid105C\"\n8. Process_PolyAmRNAmagneticIsolationModule, after ODTC elution protocol, grouping \"Preheat for next operation\", protocol name was changed to \"Reset25Cto20CLid105C\"\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      May 12, 2020\nVersion:  0.07\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Process_rRNADepletionKit, gruoping \"RNA Purification using Agencourt RNAClean XP Beads or NEBNext RNA Sample Purification Beads\" Liquid Clas for EtOH in CleanUp and CleandUpMPH was changed to \"NEBNext_RNA_II_HVF_80PercentEtOH_JetPart_V2\". Mixing and aspiration Speed were increased in order to shorten timing and increase Batch size when Cleaning Up. \n2. Process_PolyAmRNAmagneticIsolationModule, grouping \"First elution of the mRNA from the beads.\", after vortexing, when transfering beads from MIDI in HHS3 to HSP in PipetteP2, \"PIP_ReagentsFromTubeOrTroughOrPlateToPlate\" (line 686), was mixing at dispensing and should be at aspiration. Now is corrected.  \n3. Process_PolyAmRNAmagneticIsolationModule, grouping \"Elution in First Strand and Random Primers\", if loop asking if ODTC was used previously was TRUE but should be FALSE, corrected. In addition, dispensing of Binding Buffer (t_intVolumeRBB_OligodTBeads_4) was included in the loop. \n4.  Process_PolyAmRNAmagneticIsolationModule, grouping \"Elution in First Strand and Random Primers\",  pipetting of \"t_seqAspirate_FSRMastermix\" in step PIP_ReagentsFromTubeOrTroughOrPlateToPlate, dispense hight was changed from 1 to 0.7\n5. Process_PolyAmRNAmagneticIsolationModule, grouping \"Elution in First Strand and Random Primers\", final step when transferring eluate from MIDI to HSP, transfer volume was changed from 15 to 13, in addition the mixing at aspiration was removed. \n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      May 13, 2020\nVersion:  0.07\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Process_SlectProcesses, grouping \"Precool / Preheat the ODTC for the planned processes\", else loop was removed from select process 3 (if/else loop). Each running process has a specific initialization protocol. \n2. Process_SlectProcesses, grouping \"Precool / Preheat the ODTC for the planned processes\", if/else loop for \"t_intSelectedIndexSTART=3\", Initialization protocol was changed to \"Init_Block20CLid105C\"\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      May 14, 2020\nVersion:  0.08\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Process_rRNADepletionKit, gruoping \"Probe Hybridization to RNA\", when dispensing \"HybridizationMastermix\", dispense high was changed from 1 to 1.2 mm to improbe the mixing at dispensing. Liquid Class was changed to \"NEBNext_RNA_II_50F_ProbeHybridizationMastermix_SurfaceEmpty\"\n2. Process_rRNADepletionKit, gruoping \"RNAse H Digestion\", when dispensing \"RNASEHDigestionMastermix\", dispense high was changed from 1 to 1.2 mm to improbe the mixing at dispensing. Liquid Class was changed to \"NEBNext_RNA_II_50F_RNASEHDigestionMastermix_SurfaceEmpty\"\n3. Process_rRNADepletionKit, gruoping \"DNAse I Digestion\", when dispensing \"DNASEIDigestionMastermix\", dispense high was changed from 1 to 1.2 mm to improbe the mixing at dispensing. Liquid Class was changed to \"NEBNext_RNA_II_50F_DNASEIDigestionMastermix_SurfaceEmpty\"\n4. Process_rRNADepletionKit, gruoping \"RNA Purification using Agencourt RNAClean XP Beads or NEBNext RNA Sample Purification Beads\", after DNA I Digestion the volume to transfer from HSP to MIDI in HHS3 for bead purification, was increased from 50 to 53 uL.\n5. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, grouping \"Second Strand cDNA Synthesis\", grouping \"ODTC finished\", if/else loop is included. If HSP is going to be stored overnight, then comford lid is moved to park position, if not, comfort lid is discarded to waste. \n6. Process_SlectProcesses, if loop (t_arrBlnProcessActivation[2] = TRUE), grouping \"Define consumables needed using the function provided bz NGSSTAR Processes\", number of required comfort lids \"l_intNumberOfHamiltonComfortLids\" was reduced from 2 to 1. \n7. Process_SlectProcesses, if loop (t_arrBlnProcessActivation[2] = TRUE), grouping \"Define consumables needed using the function provided bz NGSSTAR Processes\", an if/else loop was included to decide if ODTC is used and user needs to load comfort lids or no. \n8. Process_SlectProcesses, Grouping \"Check Fragmentation and Size selection options\", when GUI appear to select PCR protocol for 1st strand synthesis acording to RNA size, the messages \"<300 bp, 15 minutes incubation at 42 캜\" or \">300 bp, 50 minutes incubation at 42 캜\" will appear. Before was only \"<300 bp\" or \"<300 bp\" \n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      May 14, 2020\nVersion:  0.08\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. ProcessX_StoreHSPWithinODTCOverNight, when plate was stored overnight, to interrupt the cycle was asked to press the button \"YES\", when there was not \"YES\" Botton. Now is indicated to press button \"OK\"\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      May 15, 2020\nVersion:  0.09\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. ProcessX_StoreHSPWithinODTCOverNight, Grouping \"Long term storage\", Grouping \"ODTC finished\", After storage is interrupted, a message is prompted to let user to remove the samples plate. Afterwards, instrument will continue shuting down.\n2. Process_CalculateAndLoadConsumables, grouping \"Calculate Resources for each liquid\", grouping \"Process_rRNADepletionKit\",  a new line was included to storage \"RNA purification beads\" in vials and not troughts. Problems is, beads will not be properly mixed. Stepahn needs to work on that. \n3. Process_rRNADepletionKit, grouping \"RNA Purification using Agencourt RNAClean XP Beads or NEBNext RNA Sample Purification Beads\",  grouping \"Transport of HSP\" was position after CleanUP procedure has been done to avoid cross contamination or EtOH falling drops during CleanUP process in the empty HSP.\n4. Process_PolyAmRNAmagneticIsolationModule, gropuing \"Transport old HSP and get new\" was moved from grouping \"Binding of mRNA to beads\" in to gropuing \"First elution of the mRNA from the beads.\" to avoid cross contamination or EtOH falling drops during CleanUP process in the empty HSP.\n5. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, grouping \"Purification of Double-stranded cDNA\", grouping \"Transport of HSP\" was position after CleanUP procedure has been done to avoid cross contamination or EtOH falling drops during CleanUP process in the empty HSP.\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      May 18, 2020\nVersion:  0.11\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1.  Process_rRNADepletionKit, dispense high when providing Probe Hybridization and RNase H digestion  was changed to 1.8 mm. In order to avoid air bubles and improbe liquid mixing. \n2.  Process_rRNADepletionKit, dispense high when providing DNase I Digestion was changed to 2.1 mm. In order to avoid air bubles and improbe liquid mixing. \n3.  Process_rRNADepletionKit, liquid clases when providing Probe Hybridization and RNase H digestion were changed, now \"Flow Rate\" are 10 uL/s and \"Mix Flow rate\" are 30 uL/s for both LC.\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      May 19, 2020\nVersion:  0.12\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1.  Process_Fragmentation1st2ndStrandcDNASynthesisPurification, grouping \"First Strand cDNA Synthesis\" dispense high of First Strand cDNA Synthesis was changed from 1.5 to 1.8 mm to improbe mixing and avoid air bubbles. \n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      May 20, 2020\nVersion:  0.13\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Process_SelectProcesses, Grouping \"Check Fragmentation and Size selection options\" , all content was placed inside of an \"If loop\" when \"t_blnODTCused\" equal to TRUE. In this way, the GUI will be only displayed if the ODTC is being used.\n2. Process_rRNADepletionKit, dispense high when providing Probe Hybridization and RNase H digestion  was changed to 5 mm. In order to avoid air bubles and improbe liquid mixing. \n3. Process_DistributeFragmentationMix, when providing Fragmentation and priming reaction, liquid class was changed to \"NEBNext_RNA_II_50F_FragmentationPriming_SurfaceEmpty\" and dispense high was fixed at 3 mm.\n4. Process_rRNADepletionKit, dispense high when providing Probe Hybridization and RNase H digestion  was changed to 5 mm. In order to avoid air bubles and improbe liquid mixing. \n5.  Process_rRNADepletionKit, dispense high when providing DNase I Digestion was changed to 5 mm. In order to avoid air bubles and improbe liquid mixing.\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      May 25, 2020\nVersion:  0.14\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Process_rRNADepletionKit and  Process_Fragmentation1st2ndStrandcDNASynthesisPurification, Clean Up routine was change to process 6 columns batches and Liquid Class for Ethanol cleaning was changed to \"NEBNext_RNA_II_HVF_80PercentEtOH_JetPart_V2\" which is faster and allows to clean up in batches of 6 columns.\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      May 26, 2020\nVersion:  0.15\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, grouping \"Purification of Double-stranded cDNA\", resuspension liquid class in CleanUp process was changed to \"NEBNext_RNA_II_SVF_RSB_SurfaceEmpty_FragmentationElution\"\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      May 28, 2020\nVersion:  0.16\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, grouping \"Purification of Double-stranded cDNA\", final elution step, dispense high was changed from 1 to 1.8 to avoid problems at dispensing (checked at TADM)\n2. Process_rRNADepletionKit, submethod \"NGSSTARPROCESSES::DATA_TipCounterRead\" at the beginning of the process (line 812) was disabled and may be romeved soon. It is not an optimal step to reload tips.\n3. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, submethod \"NGSSTARPROCESSES::DATA_TipCounterRead\" at the beginning of the process (line 292) was disabled and may be romeved soon. It is not an optimal step to reload tips. \n4. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, submethod \"NGSSTARPROCESSES::DATA_TipCounterRead\" before grouping \"First Strand cDNA Synthesis\" was deleted. \n5. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, grouping \"Second Strand cDNA Synthesis\", grouping \"Execution of the protocol\", the grouping \"Possible reload of tips\" was included to refill tips while the second DNA synthesis is performed in the ODTC.\n6. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, grouping \"Purification of Double-stranded cDNA\", rouping \"Possible reload of tips\" was included to refill tips, only if more than 91 samples are processed. \n7. Process_PolyAmRNAmagneticIsolationModule, submethod \"NGSSTARPROCESSES::DATA_TipCounterRead\" at the beginning of the process (line 507) was disabled and may be romeved soon. makes no sense to ask for tips just after loading steps.\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      May 29, 2020\nVersion:  0.17\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, when 96 samples were processed, it is needed to reload tips. Idially, Re-loading can happen during second strand PCR incubation, however, when start point is process 1 with more than 90 samples, there are no tips to reach that point. For this reason there are two re-loading steps (excluding themselves) hapenning during first and second DNA strand incubation. \n2. Process CalculateAndLoadConsumables, grouing \"Check if Re-fill of tips is required\" , Tips to be reloaded after this re-loading steps are calculated and handle over as a variable. \n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      June 02, 2020\nVersion:  0.18\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Process_DistributeFragmentationMix, submethod \"NGSSTARPROCESSES::DATA_TipCounterRead\" at the beginning of the process (line 284) was disabled and may be romeved soon. It is not an optimal step to reload tips.\n2. All processes, Liquid Class \"NEBNext_RNA_II_SVF_EthanolToWaste2ndAspiration_JetEmpty_CG\" was renamed to \"NEBNext_RNA_II_SVF_EthanolToWaste_JetEmpty_V2\" \n3. Liquid Class \"NEBNext_RNA_II_50F_CleanSample_SurfaceEmpty_V3\" was replaced with \"NEBNext_RNA_II_50F_FisrtStrandRandomPrimers2X_SurfaceEmpty\"\n4. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, grouping \"Purification of Double-stranded cDNA\", Liquid Classs \"NEBNext_RNA_II_SVF_SampleTransfer_SurfaceEmpty\" to transport sample from HSP to MIDI on HHS3 was changed to \"NEBNext_RNA_II_SVF_SampleTransferDoubleStrandDNA_SurfaceEmpty\" \n5. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, grouping \"Purification of Double-stranded cDNA\", liquid class \"NEBNext_RNA_II_SVF_RSB_SurfaceEmpty_FragmentationElution\" was replaced by \"NEBNext_RNA_II_SVF_RSBFragmentationElution_SurfaceEmpty\". With MPH \"NEBNext_RNA_II_SVF_RSBFragmentationElution_MPH_SurfaceEmpty\"\n6. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, grouping \"Purification of Double-stranded cDNA\", Final Elution, liquid class \"NEBNext_RNA_II_50F_CleanSample_SurfaceEmpty_V3_P1\" was replaced by \"NEBNext_RNA_II_50F_DoubleStranDNAElution_SurfaceEmpty\"; when using MPH \"NEBNext_RNA_II_50F_DoubleStranDNAElution_MPH_SurfaceEmpty\"\n7. Process_rRNADepletionKit, grouping \"RNA Purification...\", CleanUp submethod, liquid class \"NEBNext_RNA_II_50F_CleanSample_SurfaceEmpty_ElutionRNAdepleted\" was replaced by \"NEBNext_RNA_II_50F_ElutionRNAdepleted_SurfaceEmpty\". With MPH Liquid class is \"NEBNext_RNA_II_50F_ElutionRNAdepleted_MPH_SurfaceEmpty\"\n8. All processes, Clean Up steps involving MPH, Liquid Class \"NEBNext_RNA_II_SVF_SupernatantToWaste_JetEmpty\" was changed to \"NEBNext_RNA_II_SVF_SupernatantToWaste_MPH_JetEmpty\"\n9.  All processes, Clean Up steps involving MPH, Liquid Class \" NEBNext_RNA_II_SVF_EthanolToWaste_JetEmpty_V2\" was changed to \" NEBNext_RNA_II_SVF_EthanolToWaste_MPH_JetEmpty_V2\"\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      June 02, 2020\nVersion:  0.18\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n10.  All processes, Clean Up steps involving MPH, Liquid Class \"NEBNext_RNA_II_HVF_80PercentEtOH_JetPart_V2\" was changed to \"NEBNext_RNA_II_HVF_80PercentEtOH_MPH_JetPart_V2\"\n11. All processes, Liquid Class \"NEBNext_RNA_II_SVF_Ampure_SurfaceEmpty\" was renamed with \"NEBNext_RNA_II_SVF_SamplePurificatinBeads_SurfaceEmpty\"; when using MPH \"NEBNext_RNA_II_SVF_SamplePurificatinBeads_MPH_SurfaceEmpty\"\n12. All processes, Liquid Class \"NEBNext_RNA_II_HVF_Ampure_SurfaceEmpty_FastMix\" was renamed as \"NEBNext_RNA_II_HVF_SamplePurificationBeads_SurfaceEmpty_FastMix\"; when using MPH \"NEBNext_RNA_II_HVF_SamplePurificationBeads_MPH_SurfaceEmpty_FastMix\"\n13.  Process_rRNADepletionKit, when purifieng sample with RNA Sample Purification Beads, liquid classes are: \"NEBNext_RNA_II_SVF_RNASamplePurificatinBeads_SurfaceEmpty\", \"NEBNext_RNA_II_SVF_RNASamplePurificatinBeads_MPH_SurfaceEmpty\", \"NEBNext_RNA_II_HVF_RNASamplePurificationBeads_SurfaceEmpty_FastMix\" and \"NEBNext_RNA_II_HVF_RNASamplePurificationBeads_MPH_SurfaceEmpty_FastMix\" \n14, Process_rRNADepletionKit, grouping \"RNA Purification...\", Liquid Class \"NEBNext_RNA_II_SVF_SampleTransfer_SurfaceEmpty\" was renamed to \"NEBNext_RNA_II_SVF_SampleTransferRNApurification_SurfaceEmpty\"; when using MPH \"NEBNext_RNA_II_SVF_SampleTransferRNApurification_MPH_SurfaceEmpty\"\n15. Process_DistributeFragmentationMix, LiquidClass \"NEBNext_RNA_II_50F_FragmentationPriming_SurfaceEmpty\" was renamed as \"NEBNext_RNA_II_50F_FirstStrandRandomPrimers4x_SurfaceEmpty\"\n16. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, grouping \"Fragmentation\", if \"t_arrBlnProcessActivation[1]\" activated/true, liquid class for MPH transfer is defined as \"NEBNext_RNA_II_50F_FisrtStrandRandomPrimers2X_MPH_SurfaceEmpty\"\n17. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, grouping \"Purification of Double-stranded cDNA\", liquid class for MPH transfer is defined as \"NEBNext_RNA_II_SVF_SampleTransferDoubleStrandDNA_MPH_SurfaceEmpty\"\n18. When transfering sample from HSP to MIDI in HHS3 before beand CleanUp, dispense high was changed from 1.2 to 4 mm because large volumes are being transfered (53 and 84 uL). \n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      June 04, 2020\nVersion:  0.20\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Dead volume reagent percentage was changed from 0.1 to 0.3 to be sure a run with 95 samples can go until the end. Dead volumes needs to be recalculated after liquid classes are properly defined. \n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      June 08, 2020\nVersion:  0.21\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, grouping \"First Strand cDNA Synthesis\" dispense high of First Strand cDNA Synthesis was changed from 1.8 to 5 mm to improbe mixing and avoid air bubbles. This change is based in the experience gained when providing ProbeHybridization and RNAseHDigestion buffer and 95 samples water run.  \n2. Process X : Set the number of dehumidification loops to 1 instead of showing a GUI\n3. GUI to remove HSP with final samples before dehumidification was removed. \n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      June 11, 2020\nVersion:  0.22\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Before Clean Up routin2 (Process 2 and 3), there is a transfer of sample from HSP Pipette 2 to MIDI plate in HHS3, before aspiration high was fix to 1 mm, now I changed it to 0.8 to increase the recovered volume. Before there were around 2 uL left in HSP. \n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      June 19, 2020\nVersion:  0.23\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Process_PolyAmRNAmagneticIsolationModule, Liquid Classes names were changed for more specific names.\n2. ODTC script names were renamed adding \"NEB_RNAII_\" to differentiate them from any other script downloaded in the ODTC. e.g. \"NEB_RNAII_Init_4C\" instead of \"Init_4C\"\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      June 23, 2020\nVersion:  0.24\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, possible reload of tips in case of high number of samples was missing in NO-ODTC path of the Method, now is included. \n2. On 2020.06.19 I changed the liquid class \"NEBNext_RNA_II_HVF_TrisBuffer_DispenseJetPartV2\" name for \"NEBNext_RNA_II_SVF_RNA_FirstStranBindingBuffer_DispenseJet_Part\", with this change the tip type was also change to increase precision, however this change afected the available total amount of SVF tips and numbers were not enought to finish the protocol. \n3. To correct problem from step 2, Liquid Classes \"NEBNext_RNA_II_SVF_MPH_PolyA_SampleTransferStep4_SurfaceEmpty\" and \"NEBNext_RNA_II_SVF_PolyA_SampleTransferStep4_SurfaceEmpty\" are changed to \"NEBNext_RNA_II_50F_MPH_PolyA_SampleTransferStep4_SurfaceEmpty\" and \"NEBNext_RNA_II_50F_PolyA_SampleTransferStep4_SurfaceEmpty\"\n4. To dispense 50 uL of Binding Buffer, Liquid Class \"NEBNext_RNA_II_HVF_RNA_BindingBuffer_DispenseJet_Part\" was changed to \"NEBNext_RNA_II_SVF_RNA_BindingBuffer_DispenseJet_Part\"\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      June 25, 2020\nVersion:  0.25\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Process \"CalculateAndLoadConsumables\", Death Volume Reagent for \"FirstStrandcDnaSynth\" was intrudiced as 3% after Liquid Class Development\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      June 26, 2020\nVersion:  0.25\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400)\n\nVersion Notes:\n1. Process \"CalculateAndLoadConsumables\", Death Volume Reagent for \"SecondStrandcDnaSynth\" was intrudiced as 5% after Liquid Class Development\n2. Process \"CalculateAndLoadConsumables\", Death Volume Reagent for \"AmpureBeads\" was intrudiced as 1% after Liquid Class Development\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      June 26, 2020\nVersion:  0.26\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n1. Process \"CalculateAndLoadConsumables\", Volume of \"RNA Probe Hybridization MasterMix\" was changed from 3 uL (Kit V1) to 4 uL (Kit V2).\n2. Death volume 2 mL vials was set to 30 uL. \n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      July 9, 2020\nVersion:  0.27\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. After 1st rRNA Biological run, Liquid Class \"NEBNext_RNA_II_50F_ProbeHybridizationMastermix_SurfaceEmpty\" blow out volume was changed from 3 to 4, and swap speed after dispense was reduced from 50 to 5. \n2. After 1st rRNA Biological run, Liquid Class \"NEBNext_RNA_II_50F_RNASEHDigestionMastermix_SurfaceEmpty\" swap speed after dispense was reduced from 50 to 5. \n3. After 1st rRNA Biological run, Liquid Class \"NEBNext_RNA_II_50F_DNASEIDigestionMastermix_SurfaceEmpty\" swap speed after dispense was reduced from 50 to 5. \n4. After 1st rRNA Biological run, Liquid Class \"NEBNext_RNA_II_SVF_SampleTransferRNApurification_SurfaceEmpty\", Aspiration flow rate was changed from 80 to 40 mm/s, Dispense  flow rate was reamined unchanged 120 mm/s. Volume to transfer in lines 963 and 965 was changed from 53 to 55 uL. Blow out volume was changed from 0 to 5 uL.\n5. After 1st rRNA Biological run, Liquid Class \"NEBNext_RNA_II_HVF_RNASamplePurificationBeads_SurfaceEmpty_FastMix\" Blow Out volume was changed from 0 to 10 uL. \n6. After 1st rRNA Biological run, Liquid Class \"NEBNext_RNA_II_HVF_SamplePurificationBeads_SurfaceEmpty_FastMix\" Blow Out volume was changed from 0 to 10 uL. \n7. After 1st rRNA Biological run, Liquid Class \"NEBNext_RNA_II_50F_FirstStrandRandomPrimers4x_SurfaceEmpty\" swap speed after dispense was reduced from 30 to 5. \n8. After 1st rRNA Biological run, Liquid Class \"NEBNext_RNA_II_50F_FisrtStrandRandomPrimers2X_SurfaceEmpty\" swap speed after dispense was reduced from 30 to 5. \n9. After 1st rRNA Biological run, Liquid Class \"NEBNext_RNA_II_50F_FirstStrandcDnaSynth_MM_DispenseSurface_Empty\" swap speed after dispense was reduced from 50 to 5. \n10. After 1st rRNA Biological run, Liquid Class \"NEBNext_RNA_II_SVF_SecondStrandcDnaSynth_MM_DispenseSurface_Empty\" swap speed after dispense was reduced from 50 to 20.\n11. After 1st rRNA Biological run, Liquid Class \"NEBNext_RNA_II_SVF_SampleTransferDoubleStrandDNA_SurfaceEmpty\", Aspiration flow rate was changed from 80 to 40 mm/s, Dispense  flow rate reamined unchanged 120 mm/s. Volume to transfer in lines 467 and 469 was changed from 84 to 88 uL. Blow out volume was changed from 0 to 5 uL.\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      July 14, 2020\nVersion:  0.28\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. Process_rRNADepletionKit, dispense high when providing Probe Hybridization was changed from 5 to 3.5 mm. To make sure all volume after mixing come back to well (obsrevation after first biological run and liquid class improvements). \n2. Process_rRNADepletionKit, dispense high when providing RNAse Digestion Master Mix was changed from 5 to 3.5 mm. To make sure all volume after mixing come back to well (obsrevation after first biological run and liquid class improvements). Mix Flow rate was changed from 30 to 20 uL/s. \n3. After 1st rRNA Biological run and Liquid Class improvements, Liquid Class \"NEBNext_RNA_II_50F_DNASEIDigestionMastermix_SurfaceEmpty\" Stop Flow Rate was changed from 30 to 20 mm/s. \n4. Process \"CalculateAndLoadConsumables\", death volume 2 mL container for \"RNA Probe Hybridization MasterMix\" was set 20 uL\n5. Process \"CalculateAndLoadConsumables\", death volume 2 mL container for \"RNASE H Digestion MasterMix\" was set 20 uL\n6. Process \"CalculateAndLoadConsumables\", death volume 2 mL container for \"DNASE I Digestion MasterMix\" was set 35 uL\n7. Process \"CalculateAndLoadConsumables\", death volume 2 mL container for \"Agencourt RNAClean XP Beads or NEBNext RNA Sample Purification Beads (1.8X)\" was set 35 uL \n8. Process \"CalculateAndLoadConsumables\", death volume 2 mL container for \"Fragmentation and Priming Mix\" was set 30 uL\n9. Process \"CalculateAndLoadConsumables\", death volume 2 mL container for \"First Strand Reaction Mix\" was set 30 uL\n10. Process \"CalculateAndLoadConsumables\", death volume 2 mL container for \"First Strand Synthesis MasterMix\" was set 30 uL\n11. Process \"CalculateAndLoadConsumables\", death volume 2 mL container for \"Second Strand Synthesis Mastermix\" was set 35 uL\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      July 20, 2020\nVersion:  0.29\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1.  Process \"CalculateAndLoadConsumables\", death volume reagent percentage for \"RNA Probe Hybridization MasterMix\" was increased from 8 to 10 %\n2. Process \"CalculateAndLoadConsumables\", death volume reagent percentage for \"RNASE H Digestion MasterMix\" was increased from 9 to 11 %\n3. Process_rRNADepletionKit, dispense high when providing Probe Hybridization was changed from 3.5 to 3.1 mm. To make sure all volume after mixing come back to well (obsrevation after second biological run on 2020.07.20). individially tested\n4. Process_rRNADepletionKit, dispense high when providing RNAse Digestion Master Mix was changed from 3.5 to 3.1 mm. To make sure all volume after mixing come back to well (obsrevation after second biological run on 2020.07.15). individially tested\n5. Process \"CalculateAndLoadConsumables\", death volume reagent percentage for \"RNASE H Digestion MasterMix\" was decreased from 5 to 4 %\n6. After 2nd rRNA Biological run, Liquid Class \"NEBNext_RNA_II_50F_ProbeHybridizationMastermix_SurfaceEmpty\" blow out volume was changed from 4 to 7\n7. Process_rRNADepletionKit, dispense high when providing DNASEIDigestionMastermix was changed from 5 to 3.5 mm. To make sure all volume after mixing come back to well (obsrevation after second biological run on 2020.07.20). individially tested\n8. After 2nd rRNA Biological run, Liquid Class \"NEBNext_RNA_II_50F_DNASEIDigestionMastermix_SurfaceEmpty\" dispense flow rate was changed from 30 to 20 uL/s. Aspiration and dispense \"Mix Flow Rate\" were changed from 50 to 30 uL/s (both). Individually tested. \n9. After 2nd rRNA Biological run, Liquid Classes \"NEBNext_RNA_II_HVF_RNASamplePurificationBeads_SurfaceEmpty_FastMix\" and \"NEBNext_RNA_II_HVF_SamplePurificationBeads_SurfaceEmpty_FastMix\", Blow Out volume were changed from 10 to 30 uL, dispense Flow Rates were changed from 120 to 80 uL/s, settling time at dispense was set 7 s. \n10. After 2nd rRNA Biological run, Liquid Classes \"NEBNext_RNA_II_SVF_RNASamplePurificatinBeads_SurfaceEmpty\" settling time at dispense was set to 3 seconds, and blow out volume was changed from 0 to 10 uL.\n11.  Process_DistributeFragmentationMix, dispense high when providing FirstStrandRandomPrimers4x was changed from 3 to 1.8 mm. Mixing tested and liquid class \"NEBNext_RNA_II_50F_FirstStrandRandomPrimers4x_SurfaceEmpty\" aspiration dispense Mix Flow rate was changed from 20 to 10 uL/s, Blow out volume was changed from 4 to 3 uL, to assure all liquid goes out of the tip. \n12. Process \"CalculateAndLoadConsumables\", death volume reagent percentage for \"Fragmentation and Priming Mix\" (both 2x and 4x) were increased from 6 to 10 %\n13. Process \"CalculateAndLoadConsumables\", death volume reagent percentage for \"First Strand Synthesis MasterMix\" was increased from 3 to 7 %\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      July 20, 2020\nVersion:  0.29\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n14. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, dispense high when providing \"FirstStrandcDnaSynth_MM\" was changed from 5 to 3.1 mm. To make sure all volume after mixing come back to well (obsrevation after second biological run on 2020.07.15). individially tested \n15. After 2nd rRNA Biological run, Liquid Class \"NEBNext_RNA_II_50F_FirstStrandcDnaSynth_MM_DispenseSurface_Empty\" Aspiration and dispense \"Mix Flow Rate\" were changed from 40 to 16 uL/s (both). Individually tested. \n16. Process_rRNADepletionKit, group \"RNA Purification using Agencourt RNAClean XP Beads or NEBNext RNA Sample Purification Beads\", when trasnfering sample from HSP to MIDI, dispense high was changed from 4 to 1 mm. \n17. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, group \"Purification of Double-stranded cDNA\", when trasnfering sample from HSP to MIDI, dispense high was changed from 4 to 1 mm.\n18. After 2nd rRNA Biological run, Liquid Class \"NEBNext_RNA_II_SVF_SampleTransferRNApurification_SurfaceEmpty\" dispense flow rate was changed from 120 to 50 uL/s, blow out volume from 5 to 8 uL, and setling time from 0 to 2 s.\n19. After 2nd rRNA Biological run, Liquid Class \"NEBNext_RNA_II_SVF_SampleTransferDoubleStrandDNA_SurfaceEmpty\" dispense flow rate was changed from 120 to 50 uL/s, blow out volume from 5 to 8 uL, and setling time from 0 to 2 s.\n20. After 2nd rRNA Biological run, Liquid Class \"\" dispense flow rate was changed from 60 to 30 uL/s, blow out volume from 3 to 4 uL, and setling time from 1 to 2 s.\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      July 23, 2020\nVersion:  0.30\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. Process \"CalculateAndLoadConsumables\", death volume reagent percentage for \"EtOH 80%\" was increased from 15 to 20 %, death volume of throught was increased from 7 to 10 mL.\n2. _SelectProcesses : Defined mandatory stop points for individual processes (within NGSSTARLoading smt). Start 1 --> stop at 1...\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      July 24, 2020\nVersion:  0.31\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. In ODTC files \"NEBNextRNA_GINIT\" and \"NEBNextRNA_shortGINIT\",  script \"NEB_RNAII_2ndStrandcDNASynthesis\" was modified. Option \"keep temperature after method\" was changed from \"off\" to \"on\". With this change, if there is a plate stored  inside of the ODTC during Tip Refill, plate will be kept at 16 C. Tip refill depends on operator and this action could take periods of time longer than 60 minutes. \n2. ODTC \"Terminate\" command, was introduced at the end of Process 3 (Fragmentation, common path for all 3 Processes) and at the end of Process Store Overnight; in addition was removed from main Method/Path. This change was introduced to enable active cooling during tip reload while Second Synthesis is happening. \n3. In \"ProcessX_StoreHSPWithinODTCOverNight\", at the beginning was included an \"ODTC_Init\", at the end an \"ODTC_Terminate\"\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      July 27, 2020\nVersion:  0.31\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. After 3rd biological run with 47 samples, Process \"CalculateAndLoadConsumables\", percentage death volume (tip consumption) 2 mL container for \"DNASE I Digestion MasterMix\" was increased from 4 to 5%. \n2. After 3rd biological run with 47 samples, Process \"CalculateAndLoadConsumables\", percentage death volume (tip consumption) 2 mL container for \"First Strand Synthesis MasterMix\" was increased from 7 to 10%.\n3. After 3rd biological run with 47 samples, Process \"CalculateAndLoadConsumables\", percentage death volume (tip consumption) 2 mL container for \"Fragmentation and Priming Mix\"/FirstStrandRandomPrimers4x and \"First Strand Reaction Mix\"/\"FisrtStrandRandomPrimers2X\" were increased from 10 to 12%. Primers are povided in 2x excess, it is not a problem increasing death volume percentage.\n4. After 3rd biological run with 47 samples, Process \"CalculateAndLoadConsumables\", percentage death volume (tip consumption) 2 mL container for \"RNASE H Digestion MasterMix\" was idecreased from 11 to 10.5 %. This is limiting reagent, with this small change, 82 samples can be processed (instead of 81) with a 96 samples kit. \n5. After 3rd biological run with 47 samples, Process \"CalculateAndLoadConsumables\", percentage death volume (tip consumption) 2 mL container for \"RNA Probe Hybridization MasterMix\" was idecreased from 10 to 9.5 %. This is limiting reagent, with this small change, 82 samples can be processed (instead of 81) with a 96 samples kit. \n6. After 3rd biological run with 47 samples, Process_Fragmentation1st2ndStrandcDNASynthesisPurification, grouping \"First Strand cDNA Synthesis\" dispense high of First Strand cDNA Synthesis was changed from 3.1 to 2 mm to be sure there is no volume lost after mixing in some wells. \n7. After 3rd biological run with 47 samples, Process_rRNADepletionKit, dispense high when providing Probe Hybridization was changed from 3.1 to 1.8 mm to be sure there is no volume lost after mixing in some wells.\n8. Liquid Class \"NEBNext_RNA_II_HVF_RNASamplePurificationBeads_SurfaceEmpty_FastMix\" setling time at aspiration was set at 9 s, to avoid falling drops when mixing vials at a different column. Air transport volume was increased from 5 to 10 uL.\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:          Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:      July 30, 2020\nVersion:  0.32\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. Process_Fragmentation1st2ndStrandcDNASynthesisPurification, grouping \"Second Strand cDNA Synthesis\", possible reload of tips in parallel with PCR for Second Strand cDNA Synthesis, it was included a timer to calculate remaining time to run PCR after reloading tips. \n2. After 4th Biological run with 96 samples, dispense speed from liquid class \"NEBNext_RNA_II_50F_ProbeHybridizationMastermix_SurfaceEmpty\", Dispense Flow Rate and Stop Flow Rate was decreased from 30 to 10 uL/s to avoid loss drops outside tip after dispense.\n3. After 4th biological run with 96 samples, Process \"CalculateAndLoadConsumables\", percentage death volume (tip consumption) 2 mL container for \"DNASE I Digestion MasterMix\" was increased from 5 to 9%. \n4. After 4th biological test, Liquid Class \"NEBNext_RNA_II_HVF_RNASamplePurificationBeads_SurfaceEmpty_FastMix\" setling time at aspiration was reduced again from 9 to 2 s, to avoid falling drops when mixing vials at a different column. \n5. After 4th biological test, Liquid Class \"NEBNext_RNA_II_HVF_SamplePurificationBeads_SurfaceEmpty_FastMix\" setling time at aspiration was increased from 1 to 2 s, setling time at dispense was reduced from 7 to 1 s, and air transport volume was increased from 5 to 10 uL. \n6. After 4th biological run with 96 samples, Process \"CalculateAndLoadConsumables\", percentage death volume (tip consumption) 2 mL container for \"Agencourt RNAClean XP Beads or NEBNext RNA Sample Purification Beads (1.8X)\" was increased from 4.5 to 9%.\n7. Process_DistributeFragmentationMix, dispense high for \"NEBNext_RNA_II_50F_FirstStrandRandomPrimers4x_SurfaceEmpty\" was changed from 1.8 to 1.2 mm.\n8. After 4th biological run with 96 samples, Process \"CalculateAndLoadConsumables\", percentage death volume (tip consumption) 2 mL container for \"Fragmentation and Priming Mix\"/FirstStrandRandomPrimers4x and \"First Strand Reaction Mix\"/\"FisrtStrandRandomPrimers2X\" were increased from 12 to 16%. Primers are povided in 2x excess, it is not a problem increasing death volume percentage.\n9. After 4th biological run with 96 samples, Process \"CalculateAndLoadConsumables\", percentage death volume (tip consumption) 2 mL container for \"First Strand Synthesis MasterMix\" was increased from 10 to 11.5%.\n10. After 4th biological run with 96 samples, Process \"CalculateAndLoadConsumables\", percentage death volume (tip consumption) 2 mL container for \"Second Strand Synthesis Mastermix\" was increased from 5 to 10%.\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:         Kim Neufeld, Hamilton Bonaduz AG, Ch\nDate:     August 05, 2020\nVersion:  0.33\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. Process_PolyAmRNAmagneticIsolationModule: Mixing of dT Beads included\n2. Process_Fragmentation1st2ndStrandcDNASynthesisPurification: discarding of MIDI plate after PolyA part disabled (already discarded in the PolyA part)\n3. Process_PolyAmRNAmagneticIsolationModule: Transfer of total RNA from input plate to MIDI plate, increased fixed height from 1 to 3\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:         Kim Neufeld, Hamilton Bonaduz AG, Ch\nDate:     August 13, 2020\nVersion:  0.34\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. Process_PolyAmRNAmagneticIsolationModule: shaking of 11.5 킠 eluate on HHS was reduced from 1800 to 1500\n2. Process_Fragmentation1st2ndStrandcDNASynthesisPurification: fixed height during aspiration in the transfer from the fragment from a HSP on the magnet to a new HSP reduced to 0.8 from 1mm\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:         Kim Neufeld, Hamilton Bonaduz AG, Ch\nDate:     August 19, 2020\nVersion:  0.35\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. Process_PolyAmRNAmagneticIsolationModule: Liquid Class Name for Was Buffer addition before first elution changed to \"NEBNext_RNA_II_HVF_Washbuffer_DispenseJet_Part\" similar to later dispenses of Wash Buffer\n2. Process_PolyAmRNAmagneticIsolationModule: Liquid Class Name for Binding Buffer addition to empty plate (during denaturation of RNA on ODTC) changed to \"NEBNext_RNA_II_HVF_RNA_BindingBuffer_DispenseJet_Part\" similar to previous Binding Buffer dispense\n3. _CalculationAndLoadConsumables: Number of FSR Mastermix tubes provided increased to 2 (less than 49 samples) or 4 (more than 48 samples)\n4. Process_PolyAmRNAmagneticIsolationModule: Removal of all supernatants and subsequent dispense of reagent is now performed in batches - New Process_PipettingInBatches is used\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:         Kim Neufeld, Hamilton Bonaduz AG, Ch\nDate:     August 21, 2020\nVersion:  0.36\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. Method: CPAC temperature set to 8 캜 (original 6 캜)\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:         Kim Neufeld, Hamilton Bonaduz AG, Ch\nDate:     August 28, 2020\nVersion:  0.37\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. Process_PolyAmRNAmagneticIsolationModule: Transfer of First Eluate from MIDI to HSP plate: transfer volume increased to 55 킠. Therefore 300 킠 Tips need to be used and the liquid class was adjusted to 300 킠 Tips: \"NEBNext_RNA_II_SVF_PolyA_SampleTransferStep4_SurfaceEmpty\"\n2. Process_PolyAmRNAmagneticIsolationModule: Transfer of First Eluate from HSP to MIDI plate: transfer volume increased to 55 킠. Therefore 300 킠 Tips need to be used and the liquid class was adjusted to 300 킠 Tips: \"NEBNext_RNA_II_SVF_PolyA_SampleTransferStep5_SurfaceEmpty\"\n3. _CalculateAndLoadConsumables: Increased dead volume to 5000 킠 for all reagents that are provided in troughs and dispensed in Multiddispense mode (RBB, wash buffer and Tris) from the original 3000 킠.\n4. Process_PolyAmRNAmagneticIsolationModule: Transfer volume of Beads and total RNA from the MIDI plate back to HSP plate increased to 120 킠 (original 110 킠).\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:         Kim Neufeld, Hamilton Bonaduz AG, Ch\nDate:     September 01, 2020\nVersion:  0.38\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. Process_PolyAmRNAmagneticIsolationModule: Process_MixAndAddReagentInBatches used to mix the beads every 3 columns\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:         Kim Neufeld, Hamilton Bonaduz AG, Ch\nDate:     September 07, 2020\nVersion:  0.39\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. Process_PolyAmRNAmagneticIsolationModule: Transfer of First Eluate from MIDI to HSP plate: transfer volume changed back to 50 킠 and 50 킠 Tips. With 300 킠 not suffiecient 300 킠 Tips until reloading. Instead the correction curve values was increase to transfer the whole sample. Plus decreased fixed height (1.2 instead of 1.3)\n2. Process_PolyAmRNAmagneticIsolationModule: Transfer of First Eluate from HSP to MIDI plate: transfer volume changed back to 50 킠 and 50 킠 Tips. With 300 킠 not suffiecient 300 킠 Tips until reloading. Instead the correction curve values was increase to transfer the whole sample. Plus decreased fixed height (0.8 instead of 1.3)\n3. _CalculateAndLoadConsumables: Adjusted calculation of tips for the PolyA Process\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:         Kim Neufeld, Hamilton Bonaduz AG, Ch\nDate:     September 11, 2020\nVersion:  0.40\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. Process_PolyAmRNAmagneticIsolationModule: Increased number of Mix cycles on Aspiration to 5 for the transfer of dT Beads and total RNA from MIDI to HSP plate (original 2).\n2. Process_PolyAmRNAmagneticIsolationModule: Decrease Fixed height on Aspiration to 1 for the transfer of dT Beads and total RNA from MIDI to HSP plate (original 1.5).\n3. Process_PolyAmRNAmagneticIsolationModule: Decrease Fixed height on Aspiration to 1 for the transfer of the first eluate from MIDI to HSP plate (original 1.3).\n4. Process_PolyAmRNAmagneticIsolationModule: Decrease Fixed height on Aspiration to 0.8 for the transfer of the final eluate from MIDI to HSP plate (original 1.2).\n5. Process_PolyAmRNAmagneticIsolationModule: Process_ShakeAndTransferSamplesInBatches used for transfer of the final eluate.\n6. Process_PolyAmRNAmagneticIsolationModule: Liquid Class for the dispense of Binding Buffer with SVF Tips were changed to \"NEBNext_RNA_II_SVF_RNA_BindingBuffer_DispenseJet_Part\".\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:         Kim Neufeld, Hamilton Bonaduz AG, Ch\nDate:     September 30, 2020\nVersion:  0.41\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. _CalculateAndLoadConsumables: Dead Volume Reagent reduced to 0.1 for Binding Buffer, Oligo dT Beads, Wash Buffer and Tris Buffer (original 0.3)\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:         Kim Neufeld, Hamilton Bonaduz AG, Ch\nDate:     October 08, 2020\nVersion:  0.42\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. Process_PolyAmRNAmagneticIsolationModule: During transfer from total RNA plus beads and the first eluate from MIDI to HSP plate (first to transfers) shaking for 10 sec on HHS was implemented after transfer of 2 columns.\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:         Lucas Durandi, Hamilton Bonaduz AG, Ch\nDate:     October 08, 2020\nVersion:  0.43\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. Corrected Tip Calculaions for rRNA-Depletion and already-depleted section.\n \n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:         Lucas Durandi, Hamilton Bonaduz AG, Ch\nDate:     November 03, 2020\nVersion:  0.45\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1.Version:  2.5.11 of library NGSSTARProcesses.smt \n\nVersion Notes:\n\n Introduces at Processes Cleanup and Sizeselection (Single + MPH) a second shake to pull down the resuspended samples.\n\n \n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:         Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:     December 12, 2020\nVersion:  0.47\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1.Version:  2.5.11 of library NGSSTARProcesses.smt \n\nVersion Notes:\n\n- Changed Prep version invcluding check idle routine at ODTC steps\n- changed MIDI to HSP transfer fixheight at final cleanup of rRNA Depletion fomr 1.2 to 0.8 mm\n- enlarged elution volume of rRNA depletion process as transfer 5 of 7ul was insufficient\n\n \n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:         Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:     February 19th, 2021\nVersion:  0.48\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. uploaded new loading and prep smt 3.4.3\n2. extracted the rRNA depletion kit section 2 as a stand alone method\n\n \n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:         Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:     May 5th, 2021\nVersion:  1.0\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. uploaded new loading and prep smt 3.4.5\n2. updated loading version 3.2.5\n3. updated processes version 2.5.12 tested by LD within Applab\n4. implemented new logic for storing a plate over night inkluding new xml files\n \n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIRNALibraryPrepKit\nBy:         Camilo Gomez, Hamilton Bonaduz AG, Ch\nDate:     June 8th, 2021\nVersion:  1.0 Review\nBased on Kit provider KitName Preparation Reference Guide (NEB7760, version 2.2_5_19 NEB E 7400 Version1.0_4/20)\n\nVersion Notes:\n\n1. \"ClinicalNGSStarletPictures\", \"NGSStarChannelPictures\" and \"NGSStarMPHPictures\" folders were compressed in Zip files and included in dependencies.\n2. Missing dependencies in \"C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\\Library\\NGSStarLoading\\NGSStarChannelPictures\" were included\n3. Missing dependencies in \"C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\\Files\" were included. Liquid Classes Definitions were included in \"Files\" folder. \n \n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDirectionalRNALibraryPrepKit\nBy:          Stephan Grosch, Lucas Durandi, Camilo Gomez, Hamilton Bonaduz AG, Switzerland \nDate:      30-03-2022\nVersion:  1.01\n\nBased on  Reference Guide (NEB #E7760S/L, #E7765S/L  Version Version 3.0_10/19)\n\nVersion Notes: ++++++rRNADepletion only+++++Section 2++++++\n\nCRH - Hamilton UK\n1.Fixed issue with overnight storage in ODTC when option to cool is selected\n2.Fixed issue with an MPH liquid class that was being used for bead mixing in a trough\n3.Fixed some isseues with MPH pipetting logic where inaccesable positions were selected\n\nVersioning : see at tab Version\n\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  NEBNextUltraIIDirectionalRNALibraryPrepKit\nBy:          Stephan Grosch, Lucas Durandi, Camilo Gomez, Hamilton Bonaduz AG, Switzerland \nDate:      22-12-2022\nVersion:  1.0.2\n\nBased on  Reference Guide (NEB #E7760S/L, #E7765S/L  Version Version 3.0_10/19)\n\nVersion Notes: ++++++rRNADepletion only+++++Section 2++++++\n\n\nVersion Notes:\n \n 1. Field APS wanted to interprete the input work list Position IDs for indexes at columns for INDEX 1 instead of INDEX 2 --> changed accodingly to set up sequences using array t_arrIndex1PositionIDs\n 2. exchanged script names from \"StorePlateOverNight.xml\" to match the requested script names from Process X and checked if stored at room temperature is ok\n 3. t_intMaxComfortLidPerStack changed from 5 to 8 to match deck sequence\n 4. Introduces IF ELSE statement to terminate ODTC in Process_Fragmentation1st2ndStrandcDNASynthesisPurification only if Process X is set false \n 5. l_intRequiredNumberOf300uLTipsFinalCleanUp: Changed from 7 to 6.\n\n\n\n*************************************************************************************************************************************"));
}

private function _CalculateAndLoadConsumables(  ) void {
  private variable l_intNumberOf50uLTips;
  private variable l_intNumberOfMIDIPlates;
  private variable l_intNumberOf1000uLTips;
  private variable l_intNumberOf300uLTips;
  private variable l_intNumberOfHSPPlates;
  private variable l_intNumberOfHamiltonComfortLids;
  private sequence l_arr_seqReagentsOn50mlContainers[];
  private variable l_arr_strReagentNamesOn50mlContainers[];
  private variable l_arr_fltReagentVolumesOn50mlContainers[];
  private variable l_blnInputplateAlreadyLoaded;
  private variable l_intNumberOf300ExtraTips;
  private variable l_intNumberOf1000ExtraTips;
  private variable l_intNumberOf50ExtraTips;
  private variable l_blnHamiltonComfortLidAlreadyLoaded;
  private variable l_intRequiredNumberOf1000uLTipsFinalCleanUp;
  private variable l_intRequiredNumberOf300uLTipsFinalCleanUp;
  private variable l_intRequiredNumberOf50uLTipsFinalCleanUp;
  private variable l_intRequiredNumberOf300uLTipsFinalCleanUpP1;
  private variable l_intNumberOfFSRMastermixContainers;
  private variable l_arr_fltReagentVolumesOnTubeAdapterFSSMastermix[];
  private variable l_arr_fltReagentVolumesOnTubeAdapterAgencourtBeads[];
  private variable l_arr_fltReagentVolumesOnTubeAdapterDNASEIDigestionMastermix[];
  private variable l_arr_fltReagentVolumesOn50mlContainerAMPureBeads[];
  private variable l_arr_fltReagentVolumesOnTubeAdapterFragmentationMastermix[];
  private variable l_arr_fltReagentVolumesOnTubeAdapterHybridizationMastermix[];
  private variable l_arr_fltReagentVolumesOnTubeAdapterRNASEHDigestionMastermix[];
  private variable l_arr_fltReagentVolumesOnTubeAdapterSSSMastermix[];
  private variable l_arr_fltReagentVolumesOnTubeAdapterFSRMastermix[];
  private variable l_arr_fltReagentVolumesOn50mlContainerEthanol80[];
  private variable l_arr_fltReagentVolumesOn50mlContainerTEBuffer[];
  private variable l_bln_CarrierLoadable;
  MECC::TraceComment(Translate("--------------- CalculateAndLoadConsumables"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Calculate and load consumables"), ASWGLOBAL::BOOL::TRUE);
  l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::FALSE;
  l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::FALSE;
  MECC::TraceComment(Translate("---------------------------------------------------------------------------\nProcess2 \"Process02: rRNA Depletion Kit\" . Process_rRNADepletionKit + Process_Fragmentation1st2ndStrandcDNASynthesisPurification\n---------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltDiscardSupernatant_M2 = 144;
    if (t_bln_rRNA_Depletion_v2UsedInsteadOf_v1 == ASWGLOBAL::BOOL::TRUE)
    {
      t_fltVolumeHybridizationMastermix = NGSSTARLOADING::Define_VolumePerWell(Translate("RNA Probe Hybridization MasterMix"), 4);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("RNA Probe Hybridization MasterMix"), Translate("NEBNext v2 rRNA Depletion Solution"), 2);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("RNA Probe Hybridization MasterMix"), Translate("NEBNext Probe Hybridization Buffer"), 2);
    }
    else
    {
      t_fltVolumeHybridizationMastermix = NGSSTARLOADING::Define_VolumePerWell(Translate("RNA Probe Hybridization MasterMix"), 3);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("RNA Probe Hybridization MasterMix"), Translate("NEBNext rRNA Depletion Solution"), 1);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("RNA Probe Hybridization MasterMix"), Translate("NEBNext Probe Hybridization Buffer"), 2);
    }
    t_fltVolumeRNASEHDigestionMastermix = NGSSTARLOADING::Define_VolumePerWell(Translate("RNASE H Digestion MasterMix"), 5);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("RNASE H Digestion MasterMix"), Translate("RNase H Reaction Buffer"), 2);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("RNASE H Digestion MasterMix"), Translate("NEBNext Thermostable RNase H"), 2);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("RNASE H Digestion MasterMix"), Translate("Nuclease-free Water"), 1);
    t_fltVolumeDNASEIDigestionMastermix = NGSSTARLOADING::Define_VolumePerWell(Translate("DNASE I Digestion MasterMix"), 30);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("DNASE I Digestion MasterMix"), Translate("DNase I Reaction Buffer"), 5);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("DNASE I Digestion MasterMix"), Translate("NEBNext DNase I"), 2.5);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("DNASE I Digestion MasterMix"), Translate("Nuclease-free Water"), 22.5);
    if (t_bln_rRNA_Depletion_v2UsedInsteadOf_v1 == ASWGLOBAL::BOOL::TRUE)
    {
      t_fltVolumeAgencourtRNACleanXPBeads = NGSSTARLOADING::Define_VolumePerWell(Translate("Agencourt RNAClean XP Beads or NEBNext RNA Sample Purification Beads (1.8X)"), 90);
    }
    else
    {
      t_fltVolumeAgencourtRNACleanXPBeads = NGSSTARLOADING::Define_VolumePerWell(Translate("Agencourt RNAClean XP Beads or NEBNext RNA Sample Purification Beads (1.8X)"), 110);
    }
    t_fltVolumeEthanol80_1_Process01 = NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 200);
    t_fltVolumeEthanol80_2_Process01 = NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 200);
    t_fltVolumeFSRMastermixProcess2and3 = NGSSTARLOADING::Define_VolumePerWell(Translate("Fragmentation and Priming Mix"), 12);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Fragmentation and Priming Mix"), Translate("First Strand Synthesis Reaction Buffer"), 4);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Fragmentation and Priming Mix"), Translate("Nuclease-free Water"), 7);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Fragmentation and Priming Mix"), Translate("NEBNext Random Primers"), 1);
    t_fltDiscardSupernatant_M1 = 224;
    t_fltVolumeFSSMastermix = NGSSTARLOADING::Define_VolumePerWell(Translate("First Strand Synthesis MasterMix"), 10);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("First Strand Synthesis MasterMix"), Translate("NEBNext Strand Specificity Reagent"), 8);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("First Strand Synthesis MasterMix"), Translate("NEBNext First Strand Synthesis Enzyme Mix"), 2);
    t_fltVolumeSSSMastermix = NGSSTARLOADING::Define_VolumePerWell(Translate("Second Strand Synthesis Mastermix"), 60);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Second Strand Synthesis Mastermix"), Translate("NEBNext Second Strand Synthesis Reaction Buffer with dUTP Mix (10X)"), 8);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Second Strand Synthesis Mastermix"), Translate("NEBNext Second Strand Synthesis Enzyme Mix"), 4);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Second Strand Synthesis Mastermix"), Translate("Nuclease Free Water"), 48);
    t_fltVolumeEthanol80_1_Process01 = NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 200);
    t_fltVolumeEthanol80_2_Process01 = NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 200);
    t_fltVolumeAMPureBeads_Process01 = NGSSTARLOADING::Define_VolumePerWell(Translate("AMPure Beads"), 144);
    t_fltVolumeTEBuffer_Process01 = NGSSTARLOADING::Define_VolumePerWell(Translate("TE Buffer"), 53);
    l_intNumberOfMIDIPlates = 2;
    l_intNumberOfHSPPlates = 2;
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      if (l_blnHamiltonComfortLidAlreadyLoaded == ASWGLOBAL::BOOL::TRUE)
      {
        l_intNumberOfHamiltonComfortLids = 0;
      }
      else
      {
        l_intNumberOfHamiltonComfortLids = 1;
      }
    }
    else
    {
      l_intNumberOfHamiltonComfortLids = 0;
    }
    t_intRequiredNumberOf1000uLTipsM2 = l_intNumberOf1000uLTips;
    t_intRequiredNumberOf300uLTipsM2 = l_intNumberOf300uLTips;
    t_intRequiredNumberOf50uLTipsM2 = l_intNumberOf50uLTips;
    l_intNumberOf50uLTips = 1 * t_intNumberOfSamplesFromFile;
    t_intRequiredNumberOf1000uLTipsM3 = 0;
    t_intRequiredNumberOf300uLTipsM3 = 0;
    t_intRequiredNumberOf50uLTipsM3 = l_intNumberOf50uLTips;
    l_intNumberOf50uLTips = 8 * t_intNumberOfSamplesFromFile;
    l_intNumberOf50ExtraTips = 0;
    l_intNumberOf50uLTips = l_intNumberOf50uLTips + l_intNumberOf50ExtraTips;
    l_intNumberOf300uLTips = 12 * t_intNumberOfSamplesFromFile;
    l_intNumberOf300ExtraTips = 0;
    l_intNumberOf300uLTips = l_intNumberOf300uLTips + l_intNumberOf300ExtraTips;
    l_intNumberOf1000uLTips = 0 * t_intNumberOfSamplesFromFile;
    l_intNumberOf1000ExtraTips = 48;
    l_intNumberOf1000uLTips = l_intNumberOf1000uLTips + l_intNumberOf1000ExtraTips;
    t_intRequiredNumberOf1000uLTipsM4 = l_intNumberOf1000uLTips;
    t_intRequiredNumberOf300uLTipsM4 = l_intNumberOf300uLTips;
    t_intRequiredNumberOf50uLTipsM4 = l_intNumberOf50uLTips;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
    {
      if (t_bln_rRNA_Depletion_v2UsedInsteadOf_v1 == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Total RNA PCR input plate 11ul - chilled to 4캜"), 1, ML_STAR.HSP_Pipette2, 0);
      }
      else
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Total RNA PCR input plate 12ul - chilled to 4캜"), 1, ML_STAR.HSP_Pipette2, 0);
      }
      l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    }
  }
  l_intRequiredNumberOf50uLTipsFinalCleanUp = 0;
  l_intRequiredNumberOf300uLTipsFinalCleanUp = 0;
  l_intRequiredNumberOf300uLTipsFinalCleanUpP1 = 0;
  l_intRequiredNumberOf1000uLTipsFinalCleanUp = 0;
  t_intRequiredNumberOf50uLTipsFinalCleanUp = 0;
  t_intRequiredNumberOf300uLTipsFinalCleanUp = 0;
  t_intRequiredNumberOf300uLTipsFinalCleanUpP1 = 0;
  t_intRequiredNumberOf1000uLTipsFinalCleanUp = 0;
  l_intRequiredNumberOf50uLTipsFinalCleanUp = 1 * t_intNumberOfSamplesFromFile;
  t_intRequiredNumberOf50uLTipsFinalCleanUp = l_intRequiredNumberOf50uLTipsFinalCleanUp;
  l_intRequiredNumberOf300uLTipsFinalCleanUp = 6 * t_intNumberOfSamplesFromFile;
  t_intRequiredNumberOf300uLTipsFinalCleanUp = l_intRequiredNumberOf300uLTipsFinalCleanUp;
  if (t_intSelectedIndexSTART == 1)
  {
    if (t_intNumberOfSamplesFromFile > 90)
    {
      l_intRequiredNumberOf300uLTipsFinalCleanUpP1 = 8 * t_intNumberOfSamplesFromFile;
      t_intRequiredNumberOf300uLTipsFinalCleanUpP1 = l_intRequiredNumberOf300uLTipsFinalCleanUpP1;
    }
  }
  l_intRequiredNumberOf1000uLTipsFinalCleanUp = t_intNumberOfSamplesFromFile / (48 * 1.0);
  l_intRequiredNumberOf1000uLTipsFinalCleanUp = MthCeiling(l_intRequiredNumberOf1000uLTipsFinalCleanUp);
  Trace ("samples /24 = max number of batches (already ceiled) ", l_intRequiredNumberOf1000uLTipsFinalCleanUp);
  l_intRequiredNumberOf1000uLTipsFinalCleanUp = l_intRequiredNumberOf1000uLTipsFinalCleanUp * 2;
  l_intRequiredNumberOf1000uLTipsFinalCleanUp = l_intRequiredNumberOf1000uLTipsFinalCleanUp + 1;
  l_intRequiredNumberOf1000uLTipsFinalCleanUp = l_intRequiredNumberOf1000uLTipsFinalCleanUp * 8;
  t_intRequiredNumberOf1000uLTipsFinalCleanUp = l_intRequiredNumberOf1000uLTipsFinalCleanUp;
  if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
  {
    if (l_blnHamiltonComfortLidAlreadyLoaded == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfHamiltonComfortLids = 0;
    }
    else
    {
      l_intNumberOfHamiltonComfortLids = 1;
    }
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
  }
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("RNA Probe Hybridization MasterMix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 20, 9.5, ML_STAR.CPACTubeAdapter, 0, 0, t_seqAspirate_HybridizationMastermix_distinct, t_seqAspirate_HybridizationMastermix, l_arr_fltReagentVolumesOnTubeAdapterHybridizationMastermix);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("RNASE H Digestion MasterMix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 20, 10.5, ML_STAR.CPACTubeAdapter, 0, 0, t_seqAspirate_RNASEHDigestionMastermix_distinct, t_seqAspirate_RNASEHDigestionMastermix, l_arr_fltReagentVolumesOnTubeAdapterRNASEHDigestionMastermix);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("DNASE I Digestion MasterMix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 35, 9, ML_STAR.CPACTubeAdapter, 0, 0, t_seqAspirate_DNASEIDigestionMastermix_distinct, t_seqAspirate_DNASEIDigestionMastermix, l_arr_fltReagentVolumesOnTubeAdapterDNASEIDigestionMastermix);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Agencourt RNAClean XP Beads or NEBNext RNA Sample Purification Beads (1.8X)"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 35, 9, ML_STAR.CPACTubeAdapter, 0, 0, t_seqAspirate_AgencourtBeads_distinct, t_seqAspirate_AgencourtBeads, l_arr_fltReagentVolumesOnTubeAdapterAgencourtBeads);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Fragmentation and Priming Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 30, 16, ML_STAR.CPACTubeAdapter, 0, 0, t_seqAspirate_FragmentationMastermix_distinct, t_seqAspirate_FragmentationMastermix, l_arr_fltReagentVolumesOnTubeAdapterFragmentationMastermix);
  if (t_intNumberOfSamplesFromFile > 48)
  {
    l_intNumberOfFSRMastermixContainers = 4;
  }
  else
  {
    l_intNumberOfFSRMastermixContainers = 2;
  }
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("First Strand Reaction Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 30, 16, ML_STAR.CPACTubeAdapter, 5, l_intNumberOfFSRMastermixContainers, t_seqAspirate_FSRMastermix_distinct, t_seqAspirate_FSRMastermix, l_arr_fltReagentVolumesOnTubeAdapterFSRMastermix);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("First Strand Synthesis MasterMix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 30, 11.5, ML_STAR.CPACTubeAdapter, 9, 0, t_seqAspirate_FSSMastermix_distinct, t_seqAspirate_FSSMastermix, l_arr_fltReagentVolumesOnTubeAdapterFSSMastermix);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Second Strand Synthesis Mastermix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 35, 10, ML_STAR.CPACTubeAdapter, 13, 0, t_seqAspirate_SSSMastermix_distinct, t_seqAspirate_SSSMastermix, l_arr_fltReagentVolumesOnTubeAdapterSSSMastermix);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("AMPure Beads"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 50000, 3000, 10, ML_STAR.RGT50, 0, 0, t_seqAspirate_AMPureBeads_distinct, t_seqAspirate_AMPureBeads, l_arr_fltReagentVolumesOn50mlContainerAMPureBeads);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Ethanol 80%"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 50000, 10000, 20, ML_STAR.RGT50, 0, 0, t_seqAspirate_Ethanol80_distinct, t_seqAspirate_Ethanol80, l_arr_fltReagentVolumesOn50mlContainerEthanol80);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("TE Buffer"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 50000, 4000, 10, ML_STAR.RGT50, 0, 0, t_seqAspirate_TEBuffer_distinct, t_seqAspirate_TEBuffer, l_arr_fltReagentVolumesOn50mlContainerTEBuffer);
  NGSSTARLOADING::Display_Mastermix_Dialog();
  MECC::TraceComment(Translate("After all liquids have been defined..the evaluate step calculates the needed resources\n"));
  NGSSTARLOADING::Evaluate_ResourcesByCarrier();
  NGSSTARLOADING::Retrieve_50mlTrough_ReagentsVolumesAndSequences(l_arr_strReagentNamesOn50mlContainers, l_arr_fltReagentVolumesOn50mlContainers, l_arr_seqReagentsOn50mlContainers);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrIndex1PositionIDs, t_seq_IndexPlate_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrIndex1PositionIDs, t_trp_IndexPlate_Pipette, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_ODTC, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_ODTC, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Pipette, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_Pipette2, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Pipette2, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_OnMagnet, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_OnMagnet, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Waste, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.Ham_ComfortLid_ODTC, t_arrAdapterLigationPlatePositionIDs, t_trpHamiltonComfortLidODTC, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.Ham_ComfortLid_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpHamiltonComfortLidWaste, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arrAdapterLigationPlatePositionIDs, t_seqMIDI_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_Pipette, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_seqMIDI_OnMagnet, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_OnMagnet, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_Waste, 2);
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_seqHHS3_MIDI, 1);
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_trpHHS3_MIDI, 2);
  }
  else
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_seqHHS3_MIDI, 1);
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_trpHHS3_MIDI, 2);
  }
  MECC::TraceComment(Translate("Setting sequences completed"));
  SeqRemoveAll(t_trp_Stack1);
  SeqRemoveAll(t_trp_Stack4);
  SeqRemoveAll(t_trpHamiltonComfortLidStackParkPos);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfMIDI, ML_STAR.Stack_MIDI, t_trp_Stack1, t_intMaxPlatesPerStackMIDI, ML_STAR);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfHSP, ML_STAR.Stack4, t_trp_Stack4, t_intMaxPlatesPerStackHSP, ML_STAR);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfComfortLid, ML_STAR.Ham_ComfortLid_Stack_ParkPos, t_trpHamiltonComfortLidStackParkPos, t_intMaxComfortLidPerStack, ML_STAR);
  Trace ("********* g_int_TotalNumberOfComfortLid:   ", g_int_TotalNumberOfComfortLid);
  Trace ("********* t_intMaxComfortLidPerStack:   ", t_intMaxComfortLidPerStack);
  Trace ("********* l_intNumberOfHamiltonComfortLids:   ", l_intNumberOfHamiltonComfortLids);
  Trace ("********* g_int_TotalNumberOfHSP:   ", g_int_TotalNumberOfHSP);
  Trace ("********* t_intMaxPlatesPerStackHSP:   ", t_intMaxPlatesPerStackHSP);
  Trace ("********* l_intNumberOfHSPPlates:   ", l_intNumberOfHSPPlates);
  Trace ("********* g_int_TotalNumberOfMIDI:   ", g_int_TotalNumberOfMIDI);
  Trace ("********* t_intMaxPlatesPerStackMIDI:   ", t_intMaxPlatesPerStackMIDI);
  Trace ("********* l_intNumberOfMIDIPlates:   ", l_intNumberOfMIDIPlates);
  MECC::TraceComment(Translate("Stack reduced completed"));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::ODTC, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("ODTCHamiltonComforlidPosition.jpg"), Translate("HamiltonComfortLid.png"));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::PLT_Stack, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("PlateStackerCarrier.jpg"), Translate("PlateStackerCarrier_SubImage.jpg"));
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::Display_Message_Dialog(Translate("Please make sure to include ALL the tips which are loaded onto the system in the Tip Counter dialogue which will be displayed after clicking OK below."));
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::TIP50_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("Tip50ulFilterCarriers.jpg"), Translate("TIP_50.png"));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::TIP300_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("Tip300ulFilterCarriers.jpg"), Translate("TIP_300.png"));
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    l_bln_CarrierLoadable = ASWGLOBAL::BOOL::FALSE;
  }
  else
  {
    l_bln_CarrierLoadable = ASWGLOBAL::BOOL::TRUE;
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::RGT1, t_blnSkipLoadingRoutine, l_bln_CarrierLoadable, ASWGLOBAL::BOOL::FALSE, Translate("ReagentContainerCarrier1.jpg"), Translate(""));
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::RGT2, t_blnSkipLoadingRoutine, l_bln_CarrierLoadable, ASWGLOBAL::BOOL::FALSE, Translate("ReagentContainerCarrier2.jpg"), Translate(""));
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Tube_Carrier24, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("CarrierVial24.jpg"), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Vial_Carrier32_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("CarrierVial32_1.jpg"), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Vial_Carrier32_02, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("CarrierVial32_2.jpg"), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::PLT_TIP1000, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("PlateTipCarrier.jpg"), Translate("TIP_1000.png"));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::HHSx2_PLT, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("HHS_HSP_PipettePosition.jpg"), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::CPAC, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("CPACCarrier.jpg"), Translate("CPAC_Adapter.png"));
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  else
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  NGSSTARLOADING::Display_Message_Dialog(Translate("Deck loading completed. Press OK to start the run."));
}

private function _SelectProcesses(  ) void {
  private variable l_intIndexSettingsDoubleOrSingleIndexing;
  private variable l_strIndexLabwareFormat;
  private variable l_strFileInputWorklist;
  private variable l_int_OptionSelected;
  t_intSelectedIndexSTART = 2;
  t_intSelectedIndexSTOP = 2;
  t_arrBlnProcessActivation.AddAsLast(ASWGLOBAL::BOOL::FALSE);
  t_arrBlnProcessActivation.AddAsLast(ASWGLOBAL::BOOL::TRUE);
  t_arrBlnProcessActivation.AddAsLast(ASWGLOBAL::BOOL::FALSE);
  NGSSTARLOADING::Display_InputWorklist_Dialog(l_strFileInputWorklist);
  Trace ("Selected input worklist :", l_strFileInputWorklist);
  t_arrSamplePositionIDs.SetSize(0);
  t_arrIndex1PositionIDs.SetSize(0);
  t_arrIndex1IDs.SetSize(0);
  t_arrIndex2PositionIDs.SetSize(0);
  t_arrIndex2IDs.SetSize(0);
  NGSSTARLOADING::Read_InputWorklist_ExcelOrCSVFormat(l_strFileInputWorklist, ML_STAR.HSP_Pipette2, t_intNumberOfSamplesFromFile, l_intIndexSettingsDoubleOrSingleIndexing, t_arrIndex1PositionIDs, t_arrIndex1IDs, t_arrIndex2PositionIDs, t_arrIndex2IDs, t_arrAdapterLigatioPlateLabwareID, t_arrAdapterLigationPlatePositionIDs, l_strIndexLabwareFormat);
  NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(1, Translate("Is the ODTC Module used in this run?"), Translate("YES"));
  NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(1, Translate("Is the ODTC Module used in this run?"), Translate("NO"));
  NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(1);
  NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(1, Translate("Is the ODTC Module used in this run?"), l_int_OptionSelected);
  if (l_int_OptionSelected == 1)
  {
    t_blnODTCused = ASWGLOBAL::BOOL::TRUE;
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(2, Translate("Store HSP over night at the end of curren process?"), Translate("Store HSP over night at room temperature"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(2, Translate("Store HSP over night at the end of curren process?"), Translate("Store HSP over night at 12 캜"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(2, Translate("Store HSP over night at the end of curren process?"), Translate("Do not store HSP over night."));
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(2);
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(2, Translate("Store HSP over night at the end of curren process?"), l_int_OptionSelected);
    if (l_int_OptionSelected == 3)
    {
      t_blnStoreHSPoverNightWithinODTC = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      t_blnStoreHSPoverNightWithinODTC = ASWGLOBAL::BOOL::TRUE;
      if (l_int_OptionSelected == 1)
      {
        t_blnStoreAtRoomTemperature = ASWGLOBAL::BOOL::TRUE;
      }
      if (l_int_OptionSelected == 2)
      {
        t_blnStoreAtRoomTemperature = ASWGLOBAL::BOOL::FALSE;
      }
    }
  }
  else
  {
    t_blnODTCused = ASWGLOBAL::BOOL::FALSE;
    t_blnStoreHSPoverNightWithinODTC = ASWGLOBAL::BOOL::FALSE;
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(3, Translate("Size of desired RNA fragments"), Translate("150-300 bp, mRNA fragmented for 15 minutes at 94캜"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(3, Translate("Size of desired RNA fragments"), Translate("200-500 bp mRNA fragmented for 10 minutes at 94캜"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(3, Translate("Size of desired RNA fragments"), Translate("400-1,000 bp mRNA fragmented for 5 minutes at 94캜"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(3, Translate("Size of RNA fragments for 1st DNA Synthesis"), Translate("<300 bp, 15 minutes incubation at 42 캜"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(3, Translate("Size of RNA fragments for 1st DNA Synthesis"), Translate(">300 bp, 50 minutes incubation at 42 캜"));
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(3);
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(3, Translate("Size of RNA fragments for 1st DNA Synthesis"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      t_strODTCProtocol1stStrandcDNASynthesis = Translate("NEB_RNAII_1stStrandcDNASynthesisRNAInsertBelow300bp");
    }
    if (l_int_OptionSelected == 2)
    {
      t_strODTCProtocol1stStrandcDNASynthesis = Translate("NEB_RNAII_1stStrandcDNASynthesisRNAInsertAbove300bp");
    }
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(3, Translate("Size of desired RNA fragments"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      t_strODTCProtocolFragmentation = Translate("NEB_RNAII_RNAFragmentation150bp-300bp");
    }
    if (l_int_OptionSelected == 2)
    {
      t_strODTCProtocolFragmentation = Translate("NEB_RNAII_RNAFragmentation200bp-500bp");
    }
    if (l_int_OptionSelected == 3)
    {
      t_strODTCProtocolFragmentation = Translate("NEB_RNAII_RNAFragmentation400bp-1000bp");
    }
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnTestODTCWithShortDummyProtocol == ASWGLOBAL::BOOL::TRUE)
    {
      t_strODTCFolderXML = StrConcat2(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\Files\ODTC_scripts"), Translate("\NEBNextRNA_shortGINIT.xml"));
    }
    else
    {
      t_strODTCFolderXML = StrConcat2(Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\Files\ODTC_scripts"), Translate("\NEBNextRNA_GINIT.xml"));
    }
    NGSSTARPREP::ODTC_DownloadProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_intSelectedIndexSTART == 2)
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_RNAII_Init_Block20CLid105C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
  }
}

private function Process_rRNADepletionKit(  ) void {
  private variable l_strReadCurrentBarcode;
  private variable l_intReturnValue_ExternalThermalCycling;
  private variable l_arrListExternalThermalCyclingMessage[];
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process_rRNADepletionKit***************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process : rRNA Depletion Kit"));
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM2, t_intRequiredNumberOf300uLTipsM2, t_intRequiredNumberOf1000uLTipsM2, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Probe Hybridization to RNA"), ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_HybridizationMastermix, t_seqHSP_Pipette2, t_fltVolumeHybridizationMastermix, Translate("NEBNext_RNA_II_50F_ProbeHybridizationMastermix_SurfaceEmpty"), 10, 0, 10, 0, 1.8, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_RNAII_ProbeHybridizationToRNA"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_RNAII_Reset22Cto20CLid55C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
  }
  else
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Time to hybridize the samples at 95C for the advised time"));
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("External library amplification."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Wait until you finished the hybridization of the total RNA for X minutes:"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Quickly spin down the plate in a microcentrifuge to collect the liquid from the sides of the wells."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please put the processed plate from the thermocycler to the unloaded carrier at the FOURTH position. "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("RNAse H Digestion"), ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_RNASEHDigestionMastermix, t_seqHSP_Pipette2, t_fltVolumeRNASEHDigestionMastermix, Translate("NEBNext_RNA_II_50F_RNASEHDigestionMastermix_SurfaceEmpty"), 10, 0, 14, 0, 3.1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_RNAII_RNAseHDigestion"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_RNAII_Reset50Cto20CLid40C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
  }
  else
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Time to digest the samples with RNAse H at 50 C for the advised time"));
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("External library amplification."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Wait until you finished the digenstion of the hybridized RNA for X minutes:"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Quickly spin down the plate in a microcentrifuge to collect the liquid from the sides of the wells."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please put the processed plate from the thermocycler to the unloaded carrier at the FOURTH position. "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("DNAse I Digestion"), ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_DNASEIDigestionMastermix, t_seqHSP_Pipette2, t_fltVolumeDNASEIDigestionMastermix, Translate("NEBNext_RNA_II_50F_DNASEIDigestionMastermix_SurfaceEmpty"), 10, 0, 35, 0, 3.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_RNAII_DNAseIDigestion"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_RNAII_Reset37Cto20CLid105C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
  }
  else
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Time to digest the samples with DNAse I at 37 C for the advised time"));
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("External library amplification."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Wait until you finished the digenstion of the RNAse H treated RNA for X minutes:"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Quickly spin down the plate in a microcentrifuge to collect the liquid from the sides of the wells."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please put the processed plate from the thermocycler to the unloaded carrier at the FOURTH position. "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Purification of Non targeted RNA"), ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpMIDI_Pipette, 0, 1, l_strReadCurrentBarcode, 4);
  }
  else
  {
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
  }
  SeqIncrement(t_trp_Stack1, 1);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, 55, Translate("NEBNext_RNA_II_SVF_SampleTransferRNApurification_MPH_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 1, 1);
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2, t_seqHHS3_MIDI, 55, Translate("NEBNext_RNA_II_SVF_SampleTransferRNApurification_SurfaceEmpty"), 0, 0, 0, 0.8, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  }
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::Process_CleanUp_MPH(ML_STAR, t_seqAspirate_AgencourtBeads, t_seqAspirate_AgencourtBeads, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.MPH_waste, t_seqAspirate_FragmentationMastermix, 200, t_fltVolumeAgencourtRNACleanXPBeads, t_fltVolumeFSRMastermixProcess2and3, t_fltDiscardSupernatant_M2, Translate("NEBNext_RNA_II_SVF_RNASamplePurificatinBeads_SurfaceEmpty"), Translate("NEBNext_RNA_II_HVF_RNASamplePurificationBeads_SurfaceEmpty_FastMix"), Translate("NEBNext_RNA_II_HVF_80PercentEtOH_MPH_JetPart_V2"), Translate("NEBNext_RNA_II_50F_ElutionRNAdepleted_MPH_SurfaceEmpty"), Translate("NEBNext_RNA_II_SVF_SupernatantToWaste_MPH_JetEmpty"), Translate("NEBNext_RNA_II_SVF_EthanolToWaste_MPH_JetEmpty_V2"), 1600, 1600, 120, 120, t_intHHS3_HSP3_MIDI3, 900, 300, 300, 120, 300, t_intNumberOfSamplesFromFile);
  }
  else
  {
    NGSSTARPROCESSES::Process_CleanUp(ML_STAR, t_seqAspirate_AgencourtBeads, t_seqAspirate_AgencourtBeads, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqAspirate_FragmentationMastermix, 200, t_fltVolumeAgencourtRNACleanXPBeads, t_fltVolumeFSRMastermixProcess2and3, t_fltDiscardSupernatant_M2, Translate("NEBNext_RNA_II_SVF_RNASamplePurificatinBeads_SurfaceEmpty"), Translate("NEBNext_RNA_II_HVF_RNASamplePurificationBeads_SurfaceEmpty_FastMix"), Translate("NEBNext_RNA_II_HVF_80PercentEtOH_JetPart_V2"), Translate("NEBNext_RNA_II_50F_ElutionRNAdepleted_SurfaceEmpty"), Translate("NEBNext_RNA_II_SVF_SupernatantToWaste_JetEmpty"), Translate("NEBNext_RNA_II_SVF_EthanolToWaste_JetEmpty_V2"), 1600, 1600, 120, 120, 6, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::TRUE, 900, 300, 300, 120, 300);
  }
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_Waste, 0, 0, l_strReadCurrentBarcode, 4);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode, 4);
  SeqIncrement(t_trp_Stack4, 1);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, 10, Translate("NEBNext_RNA_II_50F_ElutionRNAdepleted_MPH_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 0.8, 0.7);
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, 10, Translate("NEBNext_RNA_II_50F_ElutionRNAdepleted_SurfaceEmpty"), 0, 0, 0, 0.8, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  }
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: Process_rRNADepletionKit********************"));
}

private function Process_Fragmentation1st2ndStrandcDNASynthesisPurification(  ) void {
  private variable l_strReadCurrentBarcode;
  private variable l_intReturnValue_ExternalThermalCycling;
  private timer l_intIncubationOnMagnet;
  private variable l_arrListExternalThermalCyclingMessage[];
  private timer l_hdlTimer2ndStrandcDNASynthesis;
  private variable l_fltRemainingTime;
  private variable l_fltElapsedTimeFor2ndStrandcDNASynthesis;
  private variable l_intRemainingTime;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process_Fragmentation1st2ndStrandcDNASynthesisPurification***************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process : Fragmentation 1st and 2nd Strand cDNA Synthesis and Purification"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Fragmentation"), ASWGLOBAL::BOOL::TRUE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    if(0){
      SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
    }
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, t_strODTCProtocolFragmentation, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    if(0){
      if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpHHS3_MIDI, t_trpMIDI_Waste, 0, 1, l_strReadCurrentBarcode, 4);
      }
    }
    NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_RNAII_Reset4Cto20CLid80C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
  }
  else
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Time to fragment the samples at 94C for the advised time"));
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("External library amplification."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Wait until you finished the fragmentation of the mRNA at 94캜 for X minutes:"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Quickly spin down the plate in a microcentrifuge to collect the liquid from the sides of the wells."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please put the processed plate from the thermocycler to the unloaded carrier at the FOURTH position. "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  if(0){
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_OnMagnet, 0, 0, l_strReadCurrentBarcode, 4);
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode, 4);
      SeqIncrement(t_trp_Stack4, 1);
      NGSSTARPROCESSES::DATA_IncubationTimer(l_intIncubationOnMagnet, 120, 1);
      if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqHSP_OnMagnet, t_seqHSP_Pipette2, 10, Translate("NEBNext_RNA_II_50F_FisrtStrandRandomPrimers2X_MPH_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 1, 1);
      }
      else
      {
        NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_OnMagnet, t_seqHSP_Pipette2, 10, Translate("NEBNext_RNA_II_50F_FisrtStrandRandomPrimers2X_SurfaceEmpty"), 0, 0, 0, 0.8, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
      }
    }
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("First Strand cDNA Synthesis"), ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_FSSMastermix, t_seqHSP_Pipette2, t_fltVolumeFSSMastermix, Translate("NEBNext_RNA_II_50F_FirstStrandcDnaSynth_MM_DispenseSurface_Empty"), 10, 0, 16, 0, 2, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, t_strODTCProtocol1stStrandcDNASynthesis, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    if (t_intSelectedIndexSTART == 1)
    {
      if (t_intNumberOfSamplesFromFile > 90)
      {
        NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsFinalCleanUp, t_intRequiredNumberOf300uLTipsFinalCleanUpP1, t_intRequiredNumberOf1000uLTipsFinalCleanUp, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
      }
    }
    if(0){
      if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_OnMagnet, t_trpHSP_Waste, 0, 1, l_strReadCurrentBarcode, 4);
      }
    }
    NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_RNAII_Reset4Cto20CLid30C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
  }
  else
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Incubate the sample in a preheated thermocycler with the heated lid set at = 80캜 as stated for the First Strand Synthesis"));
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    if (t_intSelectedIndexSTART == 1)
    {
      if (t_intNumberOfSamplesFromFile > 90)
      {
        NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsFinalCleanUp, t_intRequiredNumberOf300uLTipsFinalCleanUpP1, t_intRequiredNumberOf1000uLTipsFinalCleanUp, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
      }
    }
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("External library amplification."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Wait until you finished the First Strand cDNA Synthesis:"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please put the processed plate from the thermocycler to the unloaded carrier at the FOURTH position. "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Second Strand cDNA Synthesis"), ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_SSSMastermix, t_seqHSP_Pipette2, t_fltVolumeSSSMastermix, Translate("NEBNext_RNA_II_SVF_SecondStrandcDnaSynth_MM_DispenseSurface_Empty"), 10, 0, 65, 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("NEB_RNAII_2ndStrandcDNASynthesis"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    if( 0 == l_hdlTimer2ndStrandcDNASynthesis.SetTimer(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsFinalCleanUp, t_intRequiredNumberOf300uLTipsFinalCleanUp, t_intRequiredNumberOf1000uLTipsFinalCleanUp, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
    l_fltElapsedTimeFor2ndStrandcDNASynthesis = l_hdlTimer2ndStrandcDNASynthesis.GetElapsedTime();
    l_fltRemainingTime = t_intTimeForProtocol - l_fltElapsedTimeFor2ndStrandcDNASynthesis;
    if (l_fltRemainingTime < 0)
    {
      l_fltRemainingTime = 0;
    }
    l_intRemainingTime = MthCeiling(l_fltRemainingTime);
    Trace("l_fltRemainingTime : ",l_fltRemainingTime);
    Trace("l_intRemainingTime : ",l_intRemainingTime);
    NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, l_intRemainingTime, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
    }
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::FALSE)
    {
      NGSSTARPREP::ODTC_Terminate(t_intDeviceNumberODTC, ASWGLOBAL::BOOL::TRUE);
    }
  }
  else
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Incubate the sample in a preheated thermocycler with the heated lid set at = 80캜 as stated for the First Strand Synthesis"));
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsFinalCleanUp, t_intRequiredNumberOf300uLTipsFinalCleanUp, t_intRequiredNumberOf1000uLTipsFinalCleanUp, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("External library amplification."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Wait until you finished the Second Strand cDNA Synthesis:"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please put the processed plate from the thermocycler to the unloaded carrier at the FOURTH position. "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Purification of Double-stranded cDNA"), ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpMIDI_Pipette, 0, 1, l_strReadCurrentBarcode, 4);
  }
  else
  {
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
  }
  SeqIncrement(t_trp_Stack1, 1);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, 88, Translate("NEBNext_RNA_II_SVF_SampleTransferDoubleStrandDNA_MPH_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 1, 1);
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2, t_seqHHS3_MIDI, 88, Translate("NEBNext_RNA_II_SVF_SampleTransferDoubleStrandDNA_SurfaceEmpty"), 0, 0, 0, 0.8, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  }
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::Process_CleanUp_MPH(ML_STAR, t_seqAspirate_AMPureBeads, t_seqAspirate_AMPureBeads, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.MPH_waste, t_seqAspirate_TEBuffer, 200, t_fltVolumeAMPureBeads_Process01, t_fltVolumeTEBuffer_Process01, t_fltDiscardSupernatant_M1, Translate("NEBNext_RNA_II_SVF_SamplePurificatinBeads_SurfaceEmpty"), Translate("NEBNext_RNA_II_HVF_SamplePurificationBeads_SurfaceEmpty_FastMix"), Translate("NEBNext_RNA_II_HVF_80PercentEtOH_MPH_JetPart_V2"), Translate("NEBNext_RNA_II_SVF_RSBFragmentationElution_MPH_SurfaceEmpty"), Translate("NEBNext_RNA_II_SVF_SupernatantToWaste_MPH_JetEmpty"), Translate("NEBNext_RNA_II_SVF_EthanolToWaste_MPH_JetEmpty_V2"), 1600, 1600, 120, 120, t_intHHS3_HSP3_MIDI3, 300, 300, 300, 120, 300, t_intNumberOfSamplesFromFile);
  }
  else
  {
    NGSSTARPROCESSES::Process_CleanUp(ML_STAR, t_seqAspirate_AMPureBeads, t_seqAspirate_AMPureBeads, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqAspirate_TEBuffer, 200, t_fltVolumeAMPureBeads_Process01, t_fltVolumeTEBuffer_Process01, t_fltDiscardSupernatant_M1, Translate("NEBNext_RNA_II_SVF_SamplePurificatinBeads_SurfaceEmpty"), Translate("NEBNext_RNA_II_HVF_SamplePurificationBeads_SurfaceEmpty_FastMix"), Translate("NEBNext_RNA_II_HVF_80PercentEtOH_JetPart_V2"), Translate("NEBNext_RNA_II_SVF_RSBFragmentationElution_SurfaceEmpty"), Translate("NEBNext_RNA_II_SVF_SupernatantToWaste_JetEmpty"), Translate("NEBNext_RNA_II_SVF_EthanolToWaste_JetEmpty_V2"), 1600, 1600, 120, 120, 6, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::TRUE, 300, 300, 300, 120, 300);
  }
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_Waste, 0, 0, l_strReadCurrentBarcode, 4);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode, 4);
  SeqIncrement(t_trp_Stack4, 1);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, 50, Translate("NEBNext_RNA_II_50F_DoubleStranDNAElution_MPH_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 1.2, 1.8);
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, 50, Translate("NEBNext_RNA_II_50F_DoubleStranDNAElution_SurfaceEmpty"), 0, 0, 0, 1.2, 1.8, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  }
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: Process_Fragmentation1st2ndStrandcDNASynthesisPurification********************"));
}

private function ProcessX_StoreHSPWithinODTCOverNight( sequence & i_trpHSP, variable i_blnIncubateODTCWithoutActiveCooling ) void {
  private variable l_strSequenceName;
  private variable l_strODTCMessage;
  private variable l_intODTCStorageCycle;
  private variable l_retValueDialog;
  private variable l_blnRetrievePlateFromODTC;
  private variable l_strODTCFolderXML;
  private variable l_strReadCurrentBarcode;
  private variable l_arrODTCStorageListInformation[];
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  ProcessX_StoreHSPWithinODTCOverNight********************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process X: Storing the HSP within ODTC over night."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process X: Storing the HSP within ODTC over night."), ASWGLOBAL::BOOL::YES);
  l_strODTCFolderXML = Translate("C:\Program Files (x86)\HAMILTON\NGSStar\NEB\UltraIIDirectionalRNALibraryPrepKit_rRNADepletion\Files\ODTC_scripts\StorePlateOverNight.xml");
  l_blnRetrievePlateFromODTC = ASWGLOBAL::BOOL::FALSE;
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    {
      l_intODTCStorageCycle = 0;
      while (1 == 1)
      {
        l_intODTCStorageCycle = l_intODTCStorageCycle + 1;
        if (l_intODTCStorageCycle == 1)
        {
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
          NGSSTARPREP::ODTC_DownloadProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML);
          NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
          NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, i_trpHSP, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
          Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
          NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
          NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
          if (i_blnIncubateODTCWithoutActiveCooling == ASWGLOBAL::BOOL::TRUE)
          {
            MECC::TraceComment(Translate("NO ODTC protocol will be activated."));
          }
          else
          {
            NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("Init_20CLid30C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
            NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
            NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, Translate("StorePlate12degrees"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
          }
        }
        l_arrODTCStorageListInformation.SetSize(0);
        l_strODTCMessage = StrConcat2(Translate("ODTC - 2 hours cycle number : "), l_intODTCStorageCycle);
        l_arrODTCStorageListInformation.AddAsLast(l_strODTCMessage);
        l_strSequenceName = SeqGetName(i_trpHSP);
        l_strODTCMessage = StrConcat2(Translate("Retrieving the plate to following sequence : "), l_strSequenceName);
        l_arrODTCStorageListInformation.AddAsLast(l_strODTCMessage);
        l_arrODTCStorageListInformation.AddAsLast(Translate("Press OK to retrieve the HSP from ODTC."));
        l_retValueDialog = VectorCustomDialogs::ListDialog(Translate("ODTC long time storage."), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::Ok, 0, 0, 7200, Translate(""), Translate("This procedure will prolong itself each 2 hours automatically. Press OK to retrieve HSP."), l_arrODTCStorageListInformation);
        Trace("l_retValueDialog : ",l_retValueDialog);
        if (t_blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
        {
          l_retValueDialog = VectorCustomDialogs::MessageDialog(Translate("Simulation mode ODTC cycles"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Press YES to quit endless loop. Press NO to add an additional ODTC storage cycle."));
          if (l_retValueDialog == ASWGLOBAL::DIALOG::YES)
          {
            l_blnRetrievePlateFromODTC = ASWGLOBAL::BOOL::TRUE;
          }
        }
        else
        {
          if (l_retValueDialog == ASWGLOBAL::DIALOG::OK)
          {
            l_blnRetrievePlateFromODTC = ASWGLOBAL::BOOL::TRUE;
          }
        }
        if (l_blnRetrievePlateFromODTC == ASWGLOBAL::BOOL::TRUE)
        {
          if (i_blnIncubateODTCWithoutActiveCooling == ASWGLOBAL::BOOL::FALSE)
          {
            NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
          }
          NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
          if (t_intSelectedIndexSTOP == 2)
          {
            NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
            SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
          }
          else
          {
            NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
          }
          NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, i_trpHSP, 0, 1, l_strReadCurrentBarcode);
          NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
          break;
        }
      }
    }
    if (i_blnIncubateODTCWithoutActiveCooling == ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, Translate("Init_20CLid30C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
      NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, Translate("Dehumidify block"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
      NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
      NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    }
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: ProcessX_StoreHSPWithinODTCOverNight********************"));
}
