<?xml version="1.0" encoding="utf-8"?>
<MethodSet>
  <DeleteAllMethods>false</DeleteAllMethods>
  <PreMethod methodName="Init_20C" creator="J Titchmarsh" description="temperature init step. set block to 20C and lid to 70C" dateTime="2020-03-26T16:15:44.2380473+00:00">
    <TargetBlockTemperature>20</TargetBlockTemperature>
    <TargetLidTemp>70</TargetLidTemp>
  </PreMethod>
  <PreMethod methodName="Init_4C" creator="J Titchmarsh" description="temperature init step. set block to 4C and lid to 30C" dateTime="2020-03-26T16:18:04.3075608+00:00">
    <TargetBlockTemperature>4</TargetBlockTemperature>
    <TargetLidTemp>30</TargetLidTemp>
  </PreMethod>
  <PreMethod methodName="Init_110C" creator="J Titchmarsh" description="temperature init step. set block to 20C and lid to 110C" dateTime="2020-03-26T16:18:56.6167005+00:00">
    <TargetBlockTemperature>20</TargetBlockTemperature>
    <TargetLidTemp>110</TargetLidTemp>
  </PreMethod>
  <Method methodName="Reset4Cto20C" creator="J Titchmarsh" description="resets the block and lid to defalut temperatures. block 20C and lid 70C" dateTime="2020-03-26T16:20:02.5851821+00:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>30</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>30</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="Store4C" creator="J Titchmarsh" description="keeps a plate at 4C . block 4C and lid 30C. keep temperature after method" dateTime="2020-03-26T16:22:00.6377466+00:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>30</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>30</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="EndPrep65C" creator="J Titchmarsh" description="5 minutes 20C block and 70C lid, 5 mins 65 block and 70C lid, 20C block and 70C lid." dateTime="2020-03-26T16:23:44.2937431+00:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>20</StartBlockTemperature>
    <StartLidTemperature>70</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>70</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>65</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>6.1</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>70</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2.2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>70</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>70</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.8</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>70</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="NativeBarcodeLigation" creator="J Titchmarsh" description="20 minutes 20C block and 70C lid, 10 mins 65 block and 70C lid, 20C block and 70C lid." dateTime="2020-03-26T16:31:50.8148019+00:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>20</StartBlockTemperature>
    <StartLidTemperature>70</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>1200</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>70</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>65</PlateauTemperature>
      <PlateauTime>600</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>6.1</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>70</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2.2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>70</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>70</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.8</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>70</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
</MethodSet>