#pragma once
#include "ArrayTools\\ArrayTools.hs_"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLStrLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLExtensions\\Array.hsl"
#include "HSLTrcLib.hsl"
#include "HSLExtensions\\Sequence.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLAppsLib.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLTimLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\Printing 1.04\\Printing.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\ARW_Global.hsl"
#include "StringTokenizer\\StrTokenize.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace NGSSTARLOADING {
  global variable g_arr_fltMastermixComponentsVolumes[];
  global variable g_arr_strMastermixNames[];
  global variable g_arr_strMastermixComponentNames[];
  global variable g_int_TotalNumberOf50Tips;
  global variable g_int_TotalNumberOfMIDI;
  global variable g_int_TotalNumberOf300Tips;
  global variable g_int_TotalNumberOfHSP;
  global variable g_int_TotalNumberOfComfortLid;
  global variable g_int_TotalNumberOf1000Tips;
  global variable g_arr_DefineVolume_TotalVolumePerSample[];
  global variable g_arr_DefineVolume_LiquidNames[];
  global variable g_arr_MastermixNamesForDialog[];
  global variable g_arr_MastermixComponentsVolumesForDialog[];
  global variable g_arr_MastermixComponentNamesForDialog[];
  global variable g_arr_CarrierName[];
  global variable g_arr_CarrierLoadingCondition[];
  global variable g_arr_DB_strReagentTypePerContainer[];
  global variable g_arr_DB_fltVolumePerContainer[];
  global variable g_arr_DB_strReagentNamePerContainer[];
  global variable g_arr_DB_strLabwareTypePerContainer[];
  global variable g_arr_DB_strCarrierNamePerContainer[];
  global variable g_arr_DB_strPositionIdPerContainer[];
  global variable g_arr_DB_strDescriptionVolumePerContainer[];
  global sequence g_arr_DB_seqSequenceToAspirateForEachReagent[];
  global variable g_arr_DB_fltTotalVolumeRequiredForEachReagent[];
  global variable g_arr_DB_strNameForEachReagent[];
  global variable g_arr_DB_strLabwareTypeForEachReagent[];
  global variable g_arr_DB_strReagentNameLabwareTypePerContainer[];
  global variable g_str_InputWorklistFilePath;
  global variable g_bln_IndexesOnPlate(0);
  global variable g_bln_IndexesAreNeeded(0);
  global variable g_arr_DB_MultipleChoiceDialog_Labels[];
  global variable g_arr_DB_MultipleChoiceDialog_GroupNames[];
  global variable g_arr_DB_MultipleChoiceDialog_ImageFilePathsPerLabel[];
  global variable g_arr_DB_MultipleChoiceDialog_IsSelected[];
  global variable g_arr_DB_MultipleChoiceDialog_ImageWidth[];
  global variable g_arr_DB_MultipleChoiceDialog_ImageHeight[];
  global variable g_arr_DB_MultipleChoiceDialog_ToolTips[];
  global variable g_arr_DB_MultipleChoiceDialog_IsEditable[];
  global variable g_bln_ODTCInUse;
  global variable g_arr_blnActivationProcessStatus[];
  global variable g_arr_DB_MultipleChoiceDialog_LabelIndex[];
  variable t_strDirectoryName;
  global variable g_arr_DB_MultipleChoiceDialog_Index[];
  global variable g_arr_DB_MultipleChoiceDialog_DialogID[];
  global variable g_int_DB_MultipleChoiceDialog_LabelIndex;
  variable t_strFullPathReportFile;
  variable t_blnPlatformNGSSTARused;
  global variable g_str_KitName;
  global variable g_str_KitProvider;
  global variable g_arr_DB_MultipleChoiceDialog_IsTempSelected[];
  function Add_Indexes_ToCurrentProcess( device & ML_STAR, variable & i_arr_Index1_Name[], variable & i_arr_Index2_Name[], variable & i_arr_Index1_Positions[], variable & i_arr_Index2_Positions[], sequence & i_seq_Template ) void ;
  function Add_InputPlate_LoadingPositionOnDeck_ToCurrentProcess( variable i_str_Plate_Name, sequence i_seq_Template, device & ML_STAR ) void ;
  function Add_TipsPlatesAndComfortlids_ToCurrentProcess( variable i_int_NumberOfPlates_MIDI, variable i_int_NumberOfPlates_HSP, variable i_int_NumberOfComfortlids, variable i_int_NumberOfTips_1000, variable i_int_NumberOfTips_300, variable i_int_NumberOfTips_50 ) void ;
  function Calculate_TotalVolumeAndSequenceToAspirate( device & ML_STAR, variable i_str_ReagentName, variable i_str_ReagentType, variable i_int_NumberOfSamples, variable i_str_LabwareTypeId, variable i_flt_MaximumContainerVolume, variable i_flt_DeadVolumeLabware, variable i_flt_DeadVolumeReagent, sequence & i_seq_Template, variable i_int_StartingPoint, variable i_int_MinimumNumberOfContainers, sequence & o_seqCreated ) void ;
  private function Calculate_TotalVolumeAndSequenceToAspirate_OLD( device & ML_STAR, variable i_str_ReagentName, variable i_str_ReagentType, variable i_int_NumberOfSamples, variable i_str_LabwareTypeId, variable i_flt_MaximumContainerVolume, variable i_flt_DeadVolumeLabware, variable i_flt_DeadVolumeReagent, sequence & i_seq_Template, variable i_int_StartingPoint, sequence & o_seqCreated ) void ;
  private function Calculate_TotalVolume_MastermixComponent( variable i_str_MastermixName, variable i_str_MastermixComponentName, variable i_flt_MastermixVolume, variable i_flt_MastermixTotalVolume, variable i_flt_MastermixComponentVolume ) void ;
  function DATA_HandOverDataToSMT( variable i_strFullPathReportFile, variable i_intARWPlatformUsed, variable i_strKitProvider, variable i_strKitName ) void ;
  function Define_VolumePerWell( variable i_str_LiquidName, variable i_flt_VolumePerSample ) variable ;
  function Define_VolumePerWell_MastermixComponent( variable i_str_MastermixLiquidName, variable i_str_ComponentLiquidName, variable i_flt_VolumePerSample ) void ;
  function Display_Error_Dialog( variable i_str_ErrorMessage ) void ;
  function Display_InputWorklist_Dialog( variable & o_str_FileWorklistFullPath ) void ;
  function Display_Mastermix_Dialog(  ) void ;
  function Display_Message_Dialog( variable i_str_ErrorMessage ) void ;
  function Display_MultipleChoice_Dialog( variable i_int_DialogID ) void ;
  function Display_SelectEmailAddress_Dialog( variable & o_str_EmailAddress ) void ;
  private function Display_SelectODTC_Dialog( variable & o_bln_ODTCSelection ) void ;
  function Display_SelectProcesses_Dialog( variable & i_arr_strProcessId[], variable & o_int_StartProcess, variable & o_int_StopProcess, variable & o_arr_blnProcessActivationStatus[] ) void ;
  function Display_SelectProcesses_Dialog_BKP( variable & i_arr_strProcessId[], variable & o_int_StartProcess, variable & o_int_StopProcess, variable & o_arr_blnProcessActivationStatus[] ) void ;
  function Evaluate_ResourcesByCarrier( device & ML_STAR ) void ;
  function Load_Carrier( device & ML_STAR, variable i_str_CarrierID, variable i_bln_SkipLoadingRoutine, variable i_bln_IsItLoadable, variable i_str_ImageFullPath ) variable ;
  function Load_TipCarrierOnly( device & ML_STAR, variable i_str_CarrierID, variable i_bln_SkipLoadingRoutine ) void ;
  function MultipleChoiceDialog_DefineChoiceElement( variable i_int_DialogId, variable i_str_GroupName, variable i_str_Label, variable i_str_ImageFilePath ) void ;
  function MultipleChoiceDialog_RetrieveUserSelection( variable i_int_DialogID, variable i_str_GroupName, variable & o_int_OptionSelected ) void ;
  private function Pip_CheckForSufficientVolumeIn50mlTroughs( device & ML_STAR, variable & i_arr_strReagentNames[], variable & i_arr_fltReagentVolumes[], sequence & i_arr_seqAspirateReagents[], variable & o_bln_RefillContainers ) void ;
  function Read_InputWorklist_ExcelOrCSVFormat( variable i_strSamplePlateFile, sequence i_seqSourceALPTemplate, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & o_arrIndex1SeqPositions[], variable & o_arrIndex1IDs[], variable & o_arrIndex2SeqPositions[], variable & o_arrIndex2IDs[], variable & o_arrALPseqLabID[], variable & o_arrALPseqPositions[], variable & o_strIndexLabwareFormat ) void ;
  function Retrieve_20mlTrough_ReagentsVolumesAndSequences( variable & o_arr_ReagentNames[], variable & o_arr_ReagentTotalVolumes[], sequence & o_arr_ReagentSequences[] ) void ;
  function Retrieve_50mlTrough_ReagentsVolumesAndSequences( variable & o_arr_ReagentNames[], variable & o_arr_ReagentTotalVolumes[], sequence & o_arr_ReagentSequences[] ) void ;
  private function Trace_ALL_GLOBAL_ARRAYS(  ) void ;
  private function _Add_IndexesToGlobalArray( variable i_str_CarrierID, variable & i_arr_strPositionID[], variable & i_arr_strDescriptionID[] ) void ;
  private function _Add_InputPlateToGlobalArray( variable i_str_CarrierID, variable i_str_SiteID, variable i_str_InputPlateName ) void ;
  private function _Add_ResourceToGlobalArray( variable i_strLabwareType, variable i_intNumberOfElementsForThisResource, variable i_strCarrierType, variable i_strPositionIdForThisResource ) void ;
  private function _ConvertValueToString( variable i_value, variable & o_str_ConvertedValue ) void ;
  private function _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport( variable i_strStepReturnValueLoadingStep ) void ;
  private function _DATA_TranslateAutoLoadErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedAutoLoadInformaton ) void ;
  private function _Display_LoadCarrier_Dialog( variable i_str_ImagePath, variable i_str_SmallImagePath, variable i_str_TextTop, variable & i_arr_DataColumn1[], variable & i_arr_DataColumn2[], variable & i_arr_DataColumn3[] ) void ;
  private function _GenerateString( variable i_flt_Volume, variable & o_str_Description ) void ;
  private function _GetCarrierIDandSiteID_FromLabID( device & ML_STAR, variable i_str_LabID, variable & o_str_CarrierID, variable & o_str_SiteID ) variable ;
  private function _PrintToFile( variable & i_arr_strCol1[], variable & i_arr_strCol2[], variable & i_arr_strCol3[] ) void ;
  private function _Reformat_ValuesForDialog( variable i_flt_valueToReformat, variable & o_str_valueFormatted ) void ;
  private function _Version_History(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ARRAYTOOLS::_InitLibrary();
    STRTOKENIZE::_InitLibrary();
  }
  function _ExitLibrary() {
    ARRAYTOOLS::_ExitLibrary();
    STRTOKENIZE::_ExitLibrary();
  }

  function Display_SelectProcesses_Dialog_BKP( variable & i_arr_strProcessId[], variable & o_int_StartProcess, variable & o_int_StopProcess, variable & o_arr_blnProcessActivationStatus[] ) void {
    private variable l_int_ProcessCounter;
    private variable loopCounter1;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable l_int_TotalNumberOfProcesses;
    private variable l_int_processIsSelected;
    private variable l_int_StartProcess;
    private variable l_int_StopProcess;
    private variable l_arr_ToolTips[];
    private variable l_arr_IsSelected[];
    private variable l_arr_GroupName[];
    private variable l_arr_ImageHeight[];
    private variable l_arr_Labels[];
    private variable l_arr_ImageWitdth[];
    private variable l_arr_ImageSource[];
    private variable l_arr_IsEditable[];
    private variable loopCounter2;
    private variable l_bln_ForceStop;
    private variable l_int_ReturnSearchIndex;
    private variable l_arr_MandatoryStopPoints[];
    private variable l_str_MandatoryStopProcessId;
    private variable l_int_NumberOfMandatoryStopPoints;
    private variable l_str_TopText;
    private variable loopCounter5;
    private variable l_intReturnDisplayDialog;
    private variable l_intImageWidth_ElementsInDialog;
    private variable l_strWrapOrientation_ElementsInDialog;
    private variable l_strImageFilePath_ElementsInDialog;
    private variable l_intImageHeight_ElementsInDialog;
    private variable l_int_TotalNumberOfProcessPlusStartProcess;
    o_int_StartProcess = 0;
    o_int_StopProcess = 0;
    o_arr_blnProcessActivationStatus.SetSize( 0);
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
    VectorCustomDialogs::Initialize();
    l_strWrapOrientation_ElementsInDialog = VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical;
    l_intImageHeight_ElementsInDialog = 20;
    l_intImageWidth_ElementsInDialog = 20;
    if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
    {
      l_strImageFilePath_ElementsInDialog = Translate("C:\Program Files (x86)\HAMILTON\NGSStar\KitProvider\KitName\Library\NGSStar_Steps.Select_Processes.bmp");
    }
    else
    {
      l_strImageFilePath_ElementsInDialog = Translate("C:\Program Files (x86)\HAMILTON\ClinicalNGSStarlet\KitProvider\KitName\Library\NGSStar_Steps.Select_Processes.bmp");
    }
    o_arr_blnProcessActivationStatus.SetSize(0);
    l_arr_GroupName.SetSize(0);
    l_arr_Labels.SetSize(0);
    l_arr_ImageHeight.SetSize(0);
    l_arr_ImageSource.SetSize(0);
    l_arr_ImageWitdth.SetSize(0);
    l_arr_IsEditable.SetSize(0);
    l_arr_IsSelected.SetSize(0);
    l_arr_ToolTips.SetSize(0);
    l_int_StartProcess = 0;
    l_int_StopProcess = 0;
    l_int_processIsSelected = 1;
    l_int_ProcessCounter = 0;
    l_arr_MandatoryStopPoints.SetSize(0);
    if(0){
      l_arr_MandatoryStopPoints.AddAsLast(1);
    }
    l_int_TotalNumberOfProcesses=i_arr_strProcessId.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_TotalNumberOfProcesses;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_arr_GroupName.AddAsLast(Translate("Start Process"));
        l_arr_ImageSource.AddAsLast(l_strImageFilePath_ElementsInDialog);
        l_arr_ImageHeight.AddAsLast(l_intImageHeight_ElementsInDialog);
        l_arr_ImageWitdth.AddAsLast(l_intImageWidth_ElementsInDialog);
        l_arr_IsSelected.AddAsLast(0);
        l_arr_Labels.AddAsLast(i_arr_strProcessId.ElementAt( loopCounter1 -1));
      }
    }
    l_int_NumberOfMandatoryStopPoints=l_arr_MandatoryStopPoints.GetSize();
    l_str_TopText = Translate("Define Workflow ");
    {
      for(loopCounter5 = 0; loopCounter5 < l_int_NumberOfMandatoryStopPoints;)
      {
        loopCounter5 = loopCounter5 + 1;
        l_str_MandatoryStopProcessId=i_arr_strProcessId.GetAt(l_arr_MandatoryStopPoints.ElementAt( loopCounter5 -1)-1);
        if (loopCounter5 == 1)
        {
          l_str_TopText = StrConcat8(l_str_TopText, Translate("(Mandatory Stopping Points: ["), l_str_MandatoryStopProcessId, Translate("] "), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        else
        {
          l_str_TopText = StrConcat8(l_str_TopText, Translate("["), l_str_MandatoryStopProcessId, Translate("] "), Translate(""), Translate(""), Translate(""), Translate(""));
        }
      }
    }
    if(0){
      l_intReturnDisplayDialog = VectorCustomDialogs::ImageRadioButtonDialog(Translate("Test My NGS Protocol"), VectorCustomDialogs::ButtonType::AcceptCancel, 0, 0, l_str_TopText, Translate("Press Accept to confirm, Cancel to abort"), l_arr_Labels, l_arr_ToolTips, l_arr_IsEditable, l_arr_ImageSource, l_arr_ImageHeight, l_arr_ImageWitdth, l_arr_IsSelected, l_arr_GroupName, l_strWrapOrientation_ElementsInDialog, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    }
    l_intReturnDisplayDialog = VectorCustomDialogs::RadioButtonDialog(Translate(""), VectorCustomDialogs::ButtonType::AcceptCancel, 0, 0, Translate("Select start process"), Translate("Press Accept to confirm, Cancel to abort"), l_arr_Labels, l_arr_ToolTips, l_arr_IsEditable, l_arr_IsSelected, l_arr_GroupName, VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    if (l_intReturnDisplayDialog == 2)
    {
      abort;
    }
    {
      for(loopCounter3 = 0; loopCounter3 < l_int_TotalNumberOfProcesses;)
      {
        loopCounter3 = loopCounter3 + 1;
        l_int_ProcessCounter = l_int_ProcessCounter + 1;
        if (l_arr_IsSelected.ElementAt( loopCounter3 -1) == 1)
        {
          l_int_StartProcess = loopCounter3;
        }
      }
    }
    ARRAYTOOLS::Update_Value_in_Array(l_arr_IsSelected, l_int_processIsSelected, l_int_StartProcess);
    l_arr_GroupName.SetSize(0);
    l_arr_Labels.SetSize(0);
    l_arr_ImageHeight.SetSize(0);
    l_arr_ImageSource.SetSize(0);
    l_arr_ImageWitdth.SetSize(0);
    l_arr_IsEditable.SetSize(0);
    l_arr_IsSelected.SetSize(0);
    l_arr_ToolTips.SetSize(0);
    l_arr_GroupName.AddAsLast(Translate("Start Process"));
    l_arr_Labels.AddAsLast(i_arr_strProcessId.ElementAt( l_int_StartProcess -1));
    l_arr_IsEditable.AddAsLast(0);
    l_arr_ImageSource.AddAsLast(l_strImageFilePath_ElementsInDialog);
    l_arr_ImageHeight.AddAsLast(l_intImageHeight_ElementsInDialog);
    l_arr_ImageWitdth.AddAsLast(l_intImageWidth_ElementsInDialog);
    l_arr_IsSelected.AddAsLast(0);
    l_bln_ForceStop = ASWGLOBAL::BOOL::FALSE;
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_TotalNumberOfProcesses;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_arr_GroupName.AddAsLast(Translate("Stop Process"));
        if (loopCounter1 < l_int_StartProcess)
        {
          l_arr_IsEditable.AddAsLast(0);
        }
        else
        {
          if (l_bln_ForceStop == ASWGLOBAL::BOOL::FALSE)
          {
            l_arr_IsEditable.AddAsLast(1);
          }
          else
          {
            l_arr_IsEditable.AddAsLast(0);
          }
          if (l_bln_ForceStop == ASWGLOBAL::BOOL::FALSE)
          {
            l_int_ReturnSearchIndex = ARRAYTOOLS::Lookup(l_arr_MandatoryStopPoints, loopCounter1);
            if (l_int_ReturnSearchIndex != 0)
            {
              l_bln_ForceStop = ASWGLOBAL::BOOL::TRUE;
            }
            else
            {
              l_bln_ForceStop = ASWGLOBAL::BOOL::FALSE;
            }
          }
        }
        l_arr_ImageSource.AddAsLast(l_strImageFilePath_ElementsInDialog);
        l_arr_ImageHeight.AddAsLast(l_intImageHeight_ElementsInDialog);
        l_arr_ImageWitdth.AddAsLast(l_intImageWidth_ElementsInDialog);
        if (loopCounter1 == l_int_StartProcess)
        {
          l_arr_IsSelected.AddAsLast(1);
        }
        else
        {
          l_arr_IsSelected.AddAsLast(0);
        }
        l_arr_Labels.AddAsLast(i_arr_strProcessId.ElementAt( loopCounter1 -1));
      }
    }
    if(0){
      l_intReturnDisplayDialog = VectorCustomDialogs::ImageRadioButtonDialog(Translate("Test My NGS Protocol"), VectorCustomDialogs::ButtonType::AcceptCancel, 0, 0, l_str_TopText, Translate("Press Accept to confirm, Cancel to abort"), l_arr_Labels, l_arr_ToolTips, l_arr_IsEditable, l_arr_ImageSource, l_arr_ImageHeight, l_arr_ImageWitdth, l_arr_IsSelected, l_arr_GroupName, l_strWrapOrientation_ElementsInDialog, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    }
    l_intReturnDisplayDialog = VectorCustomDialogs::RadioButtonDialog(Translate(""), VectorCustomDialogs::ButtonType::AcceptCancel, 0, 0, Translate("Select stop process"), Translate("Press Accept to confirm, Cancel to abort"), l_arr_Labels, l_arr_ToolTips, l_arr_IsEditable, l_arr_IsSelected, l_arr_GroupName, VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    if (l_intReturnDisplayDialog == 2)
    {
      abort;
    }
    l_int_ProcessCounter = 0;
    l_int_TotalNumberOfProcessPlusStartProcess = l_int_TotalNumberOfProcesses + 1;
    {
      for(loopCounter4 = 0; loopCounter4 < l_int_TotalNumberOfProcessPlusStartProcess;)
      {
        loopCounter4 = loopCounter4 + 1;
        if (loopCounter4 != 1)
        {
          l_int_ProcessCounter = l_int_ProcessCounter + 1;
          if (l_arr_IsSelected.ElementAt( loopCounter4 -1) == 1)
          {
            l_int_StopProcess = l_int_ProcessCounter;
          }
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("User selected START Process: "), l_int_StartProcess);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("User selected STOP Process: "), l_int_StopProcess);
    o_int_StartProcess = l_int_StartProcess;
    o_int_StopProcess = l_int_StopProcess;
    {
      for(loopCounter2 = 0; loopCounter2 < l_int_TotalNumberOfProcesses;)
      {
        loopCounter2 = loopCounter2 + 1;
        if (loopCounter2 < l_int_StartProcess)
        {
          o_arr_blnProcessActivationStatus.AddAsLast(ASWGLOBAL::BOOL::FALSE);
        }
        else
        {
          if (loopCounter2 > l_int_StopProcess)
          {
            o_arr_blnProcessActivationStatus.AddAsLast(ASWGLOBAL::BOOL::FALSE);
          }
          else
          {
            o_arr_blnProcessActivationStatus.AddAsLast(ASWGLOBAL::BOOL::TRUE);
          }
        }
      }
    }
    g_arr_blnActivationProcessStatus=o_arr_blnProcessActivationStatus;
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("o_arr_blnProcessActivationStatus: "), o_arr_blnProcessActivationStatus);
    VectorCustomDialogs::Terminate();
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
  }

  function Display_InputWorklist_Dialog( variable & o_str_FileWorklistFullPath ) void {
    private variable l_str_FileFilter;
    private variable l_intReturnDisplayDialog;
    private variable i_str_fileFormat;
    private variable l_strErrorMessage;
    private variable loopCounter2;
    o_str_FileWorklistFullPath = 0;
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_NONE);
    l_str_FileFilter = Translate("*");
    VectorCustomDialogs::Initialize();
    l_str_FileFilter = StrConcat4(i_str_fileFormat, Translate(" files allowed|*."), Translate("*"), Translate(""));
    {
      loopCounter2 = 0;
      while (1 == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        l_strErrorMessage = StrConcat4(Translate("Error during previous selection of a worklist "), Translate("Select again a worklist - "), Translate("Trial : "), loopCounter2);
        l_intReturnDisplayDialog = VectorCustomDialogs::FileBrowserDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, Translate("Please select Input File Worklist"), VectorCustomDialogs::FileBrowserDialog::DialogType::Open, l_str_FileFilter, 1, Translate(""), o_str_FileWorklistFullPath);
        t_strDirectoryName = HSLExtensions::File::GetDirectoryName(o_str_FileWorklistFullPath);
        Trace("l_intReturnDisplayDialog : ",l_intReturnDisplayDialog);
        if (l_intReturnDisplayDialog == 2)
        {
          VectorCustomDialogs::MessageDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("User pressed abort"));
          abort;
        }
        else
        {
          if (l_intReturnDisplayDialog == -9)
          {
            VectorCustomDialogs::MessageDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, l_strErrorMessage);
          }
          else
          {
            if (o_str_FileWorklistFullPath == "")
            {
              VectorCustomDialogs::MessageDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, l_strErrorMessage);
            }
            else
            {
              g_str_InputWorklistFilePath = o_str_FileWorklistFullPath;
              break;
            }
          }
        }
      }
    }
    VectorCustomDialogs::Terminate();
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
  }

  private function Display_SelectODTC_Dialog( variable & o_bln_ODTCSelection ) void {
    private variable l_int_ODTCSelection;
    private variable l_strFullpathLoadingPicture;
    o_bln_ODTCSelection = 0;
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_NONE);
    VectorCustomDialogs::Initialize();
    if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
    {
      l_strFullpathLoadingPicture = Translate("C:\Program Files (x86)\HAMILTON\NGSStar\KitProvider\KitName\Pictures\ODTC.png");
    }
    else
    {
      l_strFullpathLoadingPicture = Translate("C:\Program Files (x86)\HAMILTON\ClinicalNGSStarlet\KitProvider\KitName\Pictures\ODTC.png");
    }
    l_int_ODTCSelection = VectorCustomDialogs::MessageDialogWithImage(Translate("Select ODTC"), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Is ODTC required this run?"), l_strFullpathLoadingPicture, 0);
    if (l_int_ODTCSelection == 7)
    {
      o_bln_ODTCSelection = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      o_bln_ODTCSelection = ASWGLOBAL::BOOL::TRUE;
    }
    VectorCustomDialogs::Terminate();
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
  }

  function Display_SelectEmailAddress_Dialog( variable & o_str_EmailAddress ) void {
    private variable l_arr_DataTypes[];
    private variable l_arr_Result[];
    private variable l_arr_ListLabels[];
    private variable l_arr_ListUnits[];
    private variable l_arr_ListValues[];
    private variable l_arr_CustomToolTip[];
    private variable l_arr_Ranges[];
    private variable l_bln_DisplayDialog;
    private variable loopCounter1;
    private variable l_int_StrFindCharacter;
    private variable l_int_LengthString;
    private variable l_intReturnDisplayDialog;
    o_str_EmailAddress = 0;
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_NONE);
    VectorCustomDialogs::Initialize();
    l_arr_CustomToolTip.SetSize(0);
    l_arr_DataTypes.SetSize(0);
    l_arr_CustomToolTip.SetSize(0);
    l_arr_ListLabels.SetSize(0);
    l_arr_ListUnits.SetSize(0);
    l_arr_ListValues.SetSize(0);
    l_arr_Ranges.SetSize(0);
    l_arr_Result.SetSize(0);
    l_bln_DisplayDialog = ASWGLOBAL::BOOL::TRUE;
    l_arr_CustomToolTip.AddAsLast(Translate("e-mail Address ###@###.com"));
    l_arr_DataTypes.AddAsLast(2);
    l_arr_ListLabels.AddAsLast(Translate("String"));
    l_arr_ListUnits.AddAsLast(Translate("e-mail address"));
    l_arr_ListValues.AddAsLast(Translate(""));
    l_arr_Ranges.AddAsLast(Translate("0|100"));
    {
      loopCounter1 = 0;
      while (l_bln_DisplayDialog == ASWGLOBAL::BOOL::TRUE)
      {
        loopCounter1 = loopCounter1 + 1;
        l_intReturnDisplayDialog = VectorCustomDialogs::InputDialog(Translate(""), VectorCustomDialogs::ButtonType::Ok, 0, 0, Translate("Enter email address to receive e-mails, otherwise leave it empty"), Translate("Press OK to Continue"), l_arr_ListLabels, l_arr_ListValues, l_arr_ListUnits, l_arr_DataTypes, l_arr_Ranges, l_arr_CustomToolTip, l_arr_Result);
        if (l_intReturnDisplayDialog == 2)
        {
          abort;
        }
        o_str_EmailAddress=l_arr_Result.GetAt(1-1);
        l_int_LengthString = StrGetLength(o_str_EmailAddress);
        if (l_int_LengthString > 0)
        {
          l_int_StrFindCharacter = StrFind(o_str_EmailAddress, Translate("@"));
          if (l_int_StrFindCharacter <= 0)
          {
            l_bln_DisplayDialog = ASWGLOBAL::BOOL::TRUE;
          }
          else
          {
            l_bln_DisplayDialog = ASWGLOBAL::BOOL::FALSE;
          }
          if (l_bln_DisplayDialog == ASWGLOBAL::BOOL::TRUE)
          {
            VectorCustomDialogs::MessageDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Wrong format for e-mail address. Please include a valid e-mail address"));
          }
        }
        else
        {
          l_bln_DisplayDialog = ASWGLOBAL::BOOL::FALSE;
        }
      }
    }
    VectorCustomDialogs::Terminate();
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
  }

  private function Calculate_TotalVolumeAndSequenceToAspirate_OLD( device & ML_STAR, variable i_str_ReagentName, variable i_str_ReagentType, variable i_int_NumberOfSamples, variable i_str_LabwareTypeId, variable i_flt_MaximumContainerVolume, variable i_flt_DeadVolumeLabware, variable i_flt_DeadVolumeReagent, sequence & i_seq_Template, variable i_int_StartingPoint, sequence & o_seqCreated ) void {
    private variable l_int_NumberOfChannelsInstalled;
    private variable l_int_ReturnSearchIndex;
    private variable l_str_ErrorMessage;
    private variable l_flt_VolumePerSample;
    private variable l_int_NumberOfSamplesPerContainerPlusExtraSample;
    private variable l_flt_TotalVolumePerContainer;
    private variable l_intPosID;
    private variable l_int_NumberOfSamplesPerContainer;
    private variable l_flt_TotalVolumeNeeded;
    private variable l_int_RemainingNumberOfContainers;
    private variable l_flt_VolumePerSampleIncludingDeadVolume;
    private variable i_strStartingPoint;
    private variable l_int_RemainingNumberOfSamples;
    private variable l_int_NumberOfContainersNeeded;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable l_strLabwareId;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable l_MaximumContainerVolumeExcludingDeadVolume;
    private variable l_strPositionId;
    private variable l_int_currentPosition;
    private variable l_intStringFound;
    private variable l_int_MaximumNumberSamplesPerContainer;
    private variable l_int_NumberOfMastermixComponents_ForThisMastermix;
    private variable l_arr_MastermixComponentsNames_ForThisMastermix[];
    private variable l_arr_MastermixComponentsVolumes_ForThisMastermix[];
    private variable loopCounter5;
    private variable i_flt_VolumePerSample;
    private variable l_flt_TotalVolumeRequired;
    private variable l_arr_fltTotalVolumeForThisReagent[];
    private variable l_arr_strDescriptionVolumePerContainer[];
    private variable l_str_VolumeAndUnits;
    private variable l_arr_strReagentTypePerContainer[];
    private variable l_arr_strReagentNamePerContainer[];
    private variable l_arr_strLabwareTypePerContainer[];
    private variable l_arr_intNumberOfSamplesPerContainer[];
    private sequence l_seq_Template;
    private variable l_arr_strPositionsId[];
    private variable l_str_CarrierID;
    private variable l_str_SiteID;
    private variable l_arr_strCarrierId[];
    private variable l_arr_fltVolumePerContainer[];
    private variable l_arr_strNameForThisReagent[];
    private variable l_arr_strLabwareTypeForThisReagent[];
    private variable l_str_ReagentNameLabwareType;
    private variable l_arr_strReagentNameLabwareTypePerContainer[];
    private variable l_strLabId;
    private variable l_intPositionCounter;
    private variable l_intTotalPositionSeqTemplate;
    private variable loopCounter6;
    private sequence l_seq_Template_copy;
    { sequence __temp; o_seqCreated = __temp; }
    if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
    {
      l_int_NumberOfChannelsInstalled = 8;
    }
    else
    {
      l_int_NumberOfChannelsInstalled = 4;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_int_NumberOfChannelsInstalled: "), l_int_NumberOfChannelsInstalled);
    l_flt_TotalVolumeRequired = 0.0;
    l_int_ReturnSearchIndex = ARRAYTOOLS::Lookup(g_arr_DefineVolume_LiquidNames, i_str_ReagentName);
    if (l_int_ReturnSearchIndex == 0)
    {
      l_str_ErrorMessage = StrConcat4(Translate("Reagent = "), i_str_ReagentName, Translate(" has not been found in the database. The liquid may correspond to a process that is not activated this run. Otherwise, check the spelling, review the Definition of Volumes"), Translate(""));
      TrcTrace(Translate(">>>>>>>>>>> l_str_ErrorMessage: "), l_str_ErrorMessage);
    }
    else
    {
      l_flt_VolumePerSample=g_arr_DefineVolume_TotalVolumePerSample.GetAt(l_int_ReturnSearchIndex-1);
      i_flt_VolumePerSample = l_flt_VolumePerSample;
      if (i_flt_VolumePerSample != 0)
      {
        TrcTrace(Translate(" ----------------------- Input Parameters: "), i_str_ReagentName);
        TrcTrace(Translate("-------------- i_flt_DeadVolumeLabware: "), i_flt_DeadVolumeLabware);
        TrcTrace(Translate("-------------- i_flt_DeadVolumeReagent: "), i_flt_DeadVolumeReagent);
        TrcTrace(Translate("-------------- i_flt_MaximumContainerVolume: "), i_flt_MaximumContainerVolume);
        TrcTrace(Translate("-------------- i_flt_VolumePerSample: "), i_flt_VolumePerSample);
        TrcTrace(Translate("-------------- i_int_NumberOfSamples: "), i_int_NumberOfSamples);
        TrcTrace(Translate(" ----------- Calculations -----------"), Translate(""));
        i_flt_DeadVolumeReagent = 1 + i_flt_DeadVolumeReagent;
        l_flt_TotalVolumeNeeded = i_int_NumberOfSamples * i_flt_VolumePerSample;
        l_flt_TotalVolumeNeeded = l_flt_TotalVolumeNeeded * i_flt_DeadVolumeReagent;
        TrcTrace(Translate("-------------- l_flt_TotalVolumeNeeded: "), l_flt_TotalVolumeNeeded);
        l_MaximumContainerVolumeExcludingDeadVolume = i_flt_MaximumContainerVolume - i_flt_DeadVolumeLabware;
        l_int_NumberOfContainersNeeded = l_flt_TotalVolumeNeeded / (l_MaximumContainerVolumeExcludingDeadVolume * 1.0);
        l_int_NumberOfContainersNeeded = MthCeiling(l_int_NumberOfContainersNeeded);
        l_int_NumberOfContainersNeeded = l_flt_TotalVolumeNeeded / (l_MaximumContainerVolumeExcludingDeadVolume * 1.0);
        l_flt_VolumePerSampleIncludingDeadVolume = i_flt_VolumePerSample * i_flt_DeadVolumeReagent;
        l_int_MaximumNumberSamplesPerContainer = l_MaximumContainerVolumeExcludingDeadVolume / (l_flt_VolumePerSampleIncludingDeadVolume * 1.0);
        l_int_MaximumNumberSamplesPerContainer = MthFloor(l_int_MaximumNumberSamplesPerContainer);
        TrcTrace(Translate("-------------- l_int_MaximumNumberSamplesPerContainer: "), l_int_MaximumNumberSamplesPerContainer);
        l_int_NumberOfContainersNeeded = i_int_NumberOfSamples / (l_int_MaximumNumberSamplesPerContainer * 1.0);
        l_int_NumberOfContainersNeeded = MthCeiling(l_int_NumberOfContainersNeeded);
        TrcTrace(Translate("-------------- Recalculation = l_int_NumberOfContainersNeeded: "), l_int_NumberOfContainersNeeded);
        l_str_VolumeAndUnits = Translate("");
        l_flt_TotalVolumePerContainer = 0.0;
        l_arr_strReagentNameLabwareTypePerContainer.SetSize(0);
        l_arr_intNumberOfSamplesPerContainer.SetSize(0);
        l_arr_fltTotalVolumeForThisReagent.SetSize(0);
        l_arr_strNameForThisReagent.SetSize(0);
        l_arr_strLabwareTypeForThisReagent.SetSize(0);
        l_arr_strDescriptionVolumePerContainer.SetSize(0);
        l_arr_fltVolumePerContainer.SetSize(0);
        l_arr_strReagentTypePerContainer.SetSize(0);
        l_arr_strReagentNamePerContainer.SetSize(0);
        l_arr_strLabwareTypePerContainer.SetSize(0);
        l_arr_strPositionsId.SetSize(0);
        l_arr_strCarrierId.SetSize(0);
        l_int_NumberOfSamplesPerContainer = i_int_NumberOfSamples / (l_int_NumberOfContainersNeeded * 1.0);
        l_int_NumberOfSamplesPerContainer = MthFloor(l_int_NumberOfSamplesPerContainer);
        l_int_RemainingNumberOfSamples = i_int_NumberOfSamples % l_int_NumberOfContainersNeeded;
        if (l_int_RemainingNumberOfSamples != 0)
        {
          l_int_NumberOfSamplesPerContainerPlusExtraSample = l_int_NumberOfSamplesPerContainer + 1;
          l_flt_TotalVolumePerContainer = ((l_int_NumberOfSamplesPerContainerPlusExtraSample * i_flt_VolumePerSample)* i_flt_DeadVolumeReagent) + i_flt_DeadVolumeLabware;
          l_flt_TotalVolumePerContainer = MthRound(l_flt_TotalVolumePerContainer, 1);
          l_int_RemainingNumberOfContainers = l_int_NumberOfContainersNeeded;
          {
            for(loopCounter2 = 0; loopCounter2 < l_int_RemainingNumberOfSamples;)
            {
              loopCounter2 = loopCounter2 + 1;
              l_flt_TotalVolumeRequired = l_flt_TotalVolumeRequired + l_flt_TotalVolumePerContainer;
              _GenerateString(l_flt_TotalVolumePerContainer, l_str_VolumeAndUnits);
              l_arr_intNumberOfSamplesPerContainer.AddAsLast(l_int_NumberOfSamplesPerContainerPlusExtraSample);
              l_arr_strDescriptionVolumePerContainer.AddAsLast(l_str_VolumeAndUnits);
              l_arr_strReagentTypePerContainer.AddAsLast(i_str_ReagentType);
              l_arr_strReagentNamePerContainer.AddAsLast(i_str_ReagentName);
              l_arr_strLabwareTypePerContainer.AddAsLast(i_str_LabwareTypeId);
              l_arr_fltVolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
              l_str_ReagentNameLabwareType = StrConcat8(i_str_ReagentName, Translate("("), i_str_LabwareTypeId, Translate(")"), Translate(""), Translate(""), Translate(""), Translate(""));
              l_arr_strReagentNameLabwareTypePerContainer.AddAsLast(l_str_ReagentNameLabwareType);
              l_int_RemainingNumberOfContainers = l_int_RemainingNumberOfContainers - 1;
            }
          }
          l_flt_TotalVolumePerContainer = ((l_int_NumberOfSamplesPerContainer * i_flt_VolumePerSample)* i_flt_DeadVolumeReagent) + i_flt_DeadVolumeLabware;
          l_flt_TotalVolumePerContainer = MthRound(l_flt_TotalVolumePerContainer, 1);
          {
            for(loopCounter1 = 0; loopCounter1 < l_int_RemainingNumberOfContainers;)
            {
              loopCounter1 = loopCounter1 + 1;
              l_flt_TotalVolumeRequired = l_flt_TotalVolumeRequired + l_flt_TotalVolumePerContainer;
              _GenerateString(l_flt_TotalVolumePerContainer, l_str_VolumeAndUnits);
              l_arr_intNumberOfSamplesPerContainer.AddAsLast(l_int_NumberOfSamplesPerContainer);
              l_arr_strDescriptionVolumePerContainer.AddAsLast(l_str_VolumeAndUnits);
              l_arr_strReagentTypePerContainer.AddAsLast(i_str_ReagentType);
              l_arr_strReagentNamePerContainer.AddAsLast(i_str_ReagentName);
              l_arr_strLabwareTypePerContainer.AddAsLast(i_str_LabwareTypeId);
              l_arr_fltVolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
              l_str_ReagentNameLabwareType = StrConcat8(i_str_ReagentName, Translate("("), i_str_LabwareTypeId, Translate(")"), Translate(""), Translate(""), Translate(""), Translate(""));
              l_arr_strReagentNameLabwareTypePerContainer.AddAsLast(l_str_ReagentNameLabwareType);
            }
          }
        }
        else
        {
          l_flt_TotalVolumePerContainer = ((l_int_NumberOfSamplesPerContainer * i_flt_VolumePerSample)* i_flt_DeadVolumeReagent) + i_flt_DeadVolumeLabware;
          l_flt_TotalVolumePerContainer = MthRound(l_flt_TotalVolumePerContainer, 1);
          {
            for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfContainersNeeded;)
            {
              loopCounter1 = loopCounter1 + 1;
              l_flt_TotalVolumeRequired = l_flt_TotalVolumeRequired + l_flt_TotalVolumePerContainer;
              _GenerateString(l_flt_TotalVolumePerContainer, l_str_VolumeAndUnits);
              l_arr_intNumberOfSamplesPerContainer.AddAsLast(l_int_NumberOfSamplesPerContainer);
              l_arr_strDescriptionVolumePerContainer.AddAsLast(l_str_VolumeAndUnits);
              l_arr_strReagentTypePerContainer.AddAsLast(i_str_ReagentType);
              l_arr_strReagentNamePerContainer.AddAsLast(i_str_ReagentName);
              l_arr_strLabwareTypePerContainer.AddAsLast(i_str_LabwareTypeId);
              l_arr_fltVolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
              l_str_ReagentNameLabwareType = StrConcat8(i_str_ReagentName, Translate(" ("), i_str_LabwareTypeId, Translate(")"), Translate(""), Translate(""), Translate(""), Translate(""));
              l_arr_strReagentNameLabwareTypePerContainer.AddAsLast(l_str_ReagentNameLabwareType);
            }
          }
        }
        TrcTrace(Translate("l_flt_TotalVolumeRequired: "), l_flt_TotalVolumeRequired);
        l_arr_fltTotalVolumeForThisReagent.AddAsLast(l_flt_TotalVolumeRequired);
        l_arr_strNameForThisReagent.AddAsLast(i_str_ReagentName);
        l_arr_strLabwareTypeForThisReagent.AddAsLast(i_str_LabwareTypeId);
        MECC::TraceComment(Translate("------------------------------ ARRAYS WITH DATA PER CONTAINER ----------------------------"));
        if(0){
          Util2::Debug::TraceArray(Translate("-------------- l_arr_strReagentNamePerContainer: "), l_arr_strReagentNamePerContainer);
          Util2::Debug::TraceArray(Translate("-------------- l_arr_strReagentTypePerContainer: "), l_arr_strReagentTypePerContainer);
          Util2::Debug::TraceArray(Translate("-------------- l_arr_strDescriptionVolumePerContainer: "), l_arr_strDescriptionVolumePerContainer);
          Util2::Debug::TraceArray(Translate("-------------- l_arr_strLabwareTypePerContainer: "), l_arr_strLabwareTypePerContainer);
          Util2::Debug::TraceArray(Translate("-------------- l_arr_intNumberOfSamplesPerContainer: "), l_arr_intNumberOfSamplesPerContainer);
          Util2::Debug::TraceArray(Translate("-------------- l_arr_fltVolumePerContainer: "), l_arr_fltVolumePerContainer);
        }
        MECC::TraceComment(Translate("-------------------------------------------------------------------------------------------------------------------------"));
        MECC::TraceComment(Translate("----------------------- Define sequence"));
        l_int_NumberOfContainersNeeded=l_arr_strDescriptionVolumePerContainer.GetSize();
        if (i_int_StartingPoint == 0)
        {
          l_int_currentPosition = i_seq_Template.GetCurrentPosition();
          i_seq_Template.SetCurrentPosition(l_int_currentPosition);
        }
        else
        {
          i_seq_Template.SetCurrentPosition(i_int_StartingPoint);
        }
        SeqRemoveAll(l_seq_Template);
        {
          for(loopCounter4 = 0; loopCounter4 < l_int_NumberOfContainersNeeded;)
          {
            loopCounter4 = loopCounter4 + 1;
            l_strLabwareId = SeqGetLabwareId(i_seq_Template);
            l_intStringFound = StrFind(l_strLabwareId, Translate("RGT"));
            l_strPositionId = SeqGetPositionId(i_seq_Template);
            if (l_intStringFound >= 0)
            {
              _ConvertValueToString(i_int_StartingPoint, i_strStartingPoint);
              l_intPosID = 0;
              {
                for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfChannelsInstalled;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  if (l_int_NumberOfChannelsInstalled == 8)
                  {
                    l_intPosID = l_intPosID + 1;
                  }
                  if (l_int_NumberOfChannelsInstalled == 4)
                  {
                    l_intPosID = l_intPosID + 2;
                  }
                  _ConvertValueToString(l_intPosID, l_strPositionId);
                  SeqAdd(l_seq_Template, l_strLabwareId, l_strPositionId);
                }
              }
              _GetCarrierIDandSiteID_FromLabID(ML_STAR, l_strLabwareId, l_str_CarrierID, l_str_SiteID);
              l_arr_strPositionsId.AddAsLast(l_str_SiteID);
              l_arr_strCarrierId.AddAsLast(l_str_CarrierID);
            }
            else
            {
              SeqAdd(l_seq_Template, l_strLabwareId, l_strPositionId);
              _GetCarrierIDandSiteID_FromLabID(ML_STAR, l_strLabwareId, l_str_CarrierID, l_str_SiteID);
              l_arr_strPositionsId.AddAsLast(l_strPositionId);
              l_arr_strCarrierId.AddAsLast(l_str_CarrierID);
            }
            SeqIncrement(i_seq_Template, 1);
          }
        }
        if(0){
          Util2::Debug::TraceArray(Translate("-------------- l_arr_strPositionsId: "), l_arr_strPositionsId);
          Util2::Debug::TraceArray(Translate("-------------- l_arr_strCarrierId: "), l_arr_strCarrierId);
        }
        l_seq_Template.SetCurrentPosition(1);
        if (l_intStringFound >= 0)
        {
          g_arr_DB_seqSequenceToAspirateForEachReagent.AddAsLast(l_seq_Template);
        }
        else
        {
          SeqCopySequence(l_seq_Template_copy, l_seq_Template);
          SeqRemoveAll(l_seq_Template_copy);
          l_seq_Template.SetCurrentPosition(1);
          l_intTotalPositionSeqTemplate = SeqGetTotal(l_seq_Template);
          l_intPositionCounter = 0;
          {
            for(loopCounter6 = 0; loopCounter6 < i_int_NumberOfSamples;)
            {
              loopCounter6 = loopCounter6 + 1;
              l_intPositionCounter = l_intPositionCounter + 1;
              l_strLabId = SeqGetLabwareId(l_seq_Template);
              l_strPositionId = SeqGetPositionId(l_seq_Template);
              SeqAdd(l_seq_Template_copy, l_strLabId, l_strPositionId);
              SeqIncrement(l_seq_Template, 1);
              if (l_intPositionCounter == l_intTotalPositionSeqTemplate)
              {
                l_intPositionCounter = 0;
                l_seq_Template.SetCurrentPosition(1);
              }
            }
          }
          SeqRemoveAll(l_seq_Template);
          SeqCopySequence(l_seq_Template, l_seq_Template_copy);
          l_seq_Template.SetCurrentPosition(1);
          g_arr_DB_seqSequenceToAspirateForEachReagent.AddAsLast(l_seq_Template);
        }
        if(0){
          TrcTraceSequence(l_seq_Template);
        }
        o_seqCreated = HSLExtensions::Sequence::Copy(l_seq_Template, 1);
        if(0){
          TrcTraceSequence(o_seqCreated);
        }
        if (i_str_ReagentType == ARW_Global::ReagentType::Mastermix)
        {
          ARRAYTOOLS::ArrayVLookUp(g_arr_strMastermixComponentNames, g_arr_strMastermixNames, i_str_ReagentName, l_arr_MastermixComponentsNames_ForThisMastermix);
          ARRAYTOOLS::ArrayVLookUp(g_arr_fltMastermixComponentsVolumes, g_arr_strMastermixNames, i_str_ReagentName, l_arr_MastermixComponentsVolumes_ForThisMastermix);
          l_int_NumberOfMastermixComponents_ForThisMastermix=l_arr_MastermixComponentsNames_ForThisMastermix.GetSize();
          {
            for(loopCounter5 = 0; loopCounter5 < l_int_NumberOfMastermixComponents_ForThisMastermix;)
            {
              loopCounter5 = loopCounter5 + 1;
              Calculate_TotalVolume_MastermixComponent(i_str_ReagentName, l_arr_MastermixComponentsNames_ForThisMastermix.ElementAt( loopCounter5 -1), i_flt_VolumePerSample, l_flt_TotalVolumeRequired, l_arr_MastermixComponentsVolumes_ForThisMastermix.ElementAt( loopCounter5 -1));
            }
          }
        }
        g_arr_DB_strNameForEachReagent = HSLExtensions::Array::Concat(g_arr_DB_strNameForEachReagent, l_arr_strNameForThisReagent);
        g_arr_DB_fltTotalVolumeRequiredForEachReagent = HSLExtensions::Array::Concat(g_arr_DB_fltTotalVolumeRequiredForEachReagent, l_arr_fltTotalVolumeForThisReagent);
        g_arr_DB_strLabwareTypeForEachReagent = HSLExtensions::Array::Concat(g_arr_DB_strLabwareTypeForEachReagent, l_arr_strLabwareTypeForThisReagent);
        g_arr_DB_strReagentNameLabwareTypePerContainer = HSLExtensions::Array::Concat(g_arr_DB_strReagentNameLabwareTypePerContainer, l_arr_strReagentNameLabwareTypePerContainer);
        g_arr_DB_strDescriptionVolumePerContainer = HSLExtensions::Array::Concat(g_arr_DB_strDescriptionVolumePerContainer, l_arr_strDescriptionVolumePerContainer);
        g_arr_DB_strReagentTypePerContainer = HSLExtensions::Array::Concat(g_arr_DB_strReagentTypePerContainer, l_arr_strReagentTypePerContainer);
        g_arr_DB_strReagentNamePerContainer = HSLExtensions::Array::Concat(g_arr_DB_strReagentNamePerContainer, l_arr_strReagentNamePerContainer);
        g_arr_DB_strLabwareTypePerContainer = HSLExtensions::Array::Concat(g_arr_DB_strLabwareTypePerContainer, l_arr_strLabwareTypePerContainer);
        g_arr_DB_strPositionIdPerContainer = HSLExtensions::Array::Concat(g_arr_DB_strPositionIdPerContainer, l_arr_strPositionsId);
        g_arr_DB_strCarrierNamePerContainer = HSLExtensions::Array::Concat(g_arr_DB_strCarrierNamePerContainer, l_arr_strCarrierId);
        g_arr_DB_fltVolumePerContainer = HSLExtensions::Array::Concat(g_arr_DB_fltVolumePerContainer, l_arr_fltVolumePerContainer);
      }
    }
    return;
  }

  private function _Reformat_ValuesForDialog( variable i_flt_valueToReformat, variable & o_str_valueFormatted ) void {
    private variable str_io_strValueToReformat;
    private variable l_strVariableType;
    private variable io_valueToReformat;
    private variable intStrFindResult;
    o_str_valueFormatted = 0;
    l_strVariableType = StrGetType(i_flt_valueToReformat);
    if (l_strVariableType != "s")
    {
      if (l_strVariableType == "i")
      {
        io_valueToReformat = StrIStr(i_flt_valueToReformat);
      }
      if (l_strVariableType == "f")
      {
        i_flt_valueToReformat = MthRound(i_flt_valueToReformat, 2);
        str_io_strValueToReformat = StrConcat2(Translate(""), i_flt_valueToReformat);
        intStrFindResult = StrFind(str_io_strValueToReformat, Translate("."));
        if (intStrFindResult != -1)
        {
          intStrFindResult = intStrFindResult + 2;
          o_str_valueFormatted = StrLeft(str_io_strValueToReformat, intStrFindResult);
        }
        else
        {
          o_str_valueFormatted = str_io_strValueToReformat;
        }
      }
    }
    else
    {
      i_flt_valueToReformat = MthRound(i_flt_valueToReformat, 2);
      str_io_strValueToReformat = StrConcat2(Translate(""), i_flt_valueToReformat);
      intStrFindResult = StrFind(str_io_strValueToReformat, Translate("."));
      if (intStrFindResult != -1)
      {
        intStrFindResult = intStrFindResult + 2;
        o_str_valueFormatted = StrLeft(str_io_strValueToReformat, intStrFindResult);
      }
      else
      {
        o_str_valueFormatted = str_io_strValueToReformat;
      }
    }
  }

  private function _ConvertValueToString( variable i_value, variable & o_str_ConvertedValue ) void {
    private variable l_str_ValueType;
    o_str_ConvertedValue = 0;
    l_str_ValueType = StrGetType(i_value);
    if (l_str_ValueType == "i")
    {
      o_str_ConvertedValue = StrIStr(i_value);
    }
    if (l_str_ValueType == "f")
    {
      o_str_ConvertedValue = StrFStr(i_value);
    }
    if (l_str_ValueType == "s")
    {
      o_str_ConvertedValue = i_value;
    }
  }

  private function Calculate_TotalVolume_MastermixComponent( variable i_str_MastermixName, variable i_str_MastermixComponentName, variable i_flt_MastermixVolume, variable i_flt_MastermixTotalVolume, variable i_flt_MastermixComponentVolume ) void {
    private variable l_arr_MastermixNames[];
    private variable l_arr_MastermixComponentsNames[];
    private variable l_arr_MastermixComponentsVolumes[];
    private variable l_flt_MastermixComponentTotalVolume;
    if (i_flt_MastermixComponentVolume != 0)
    {
      l_flt_MastermixComponentTotalVolume = 0.0;
      TrcTrace("------- Calculate Volume for the next Mastermix Component ",i_str_MastermixComponentName);
      TrcTrace("Component of Mastermix: ", i_str_MastermixName);
      l_flt_MastermixComponentTotalVolume = (i_flt_MastermixComponentVolume * i_flt_MastermixTotalVolume)/i_flt_MastermixVolume;
      TrcTrace("Volume calculated (ul): ", l_flt_MastermixComponentTotalVolume);
      l_arr_MastermixNames.SetSize(0);
      l_arr_MastermixComponentsNames.SetSize(0);
      l_arr_MastermixComponentsVolumes.SetSize(0);
      l_arr_MastermixNames.AddAsLast(i_str_MastermixName);
      l_arr_MastermixComponentsNames.AddAsLast(i_str_MastermixComponentName);
      l_arr_MastermixComponentsVolumes.AddAsLast(l_flt_MastermixComponentTotalVolume);
      g_arr_MastermixNamesForDialog = HSLExtensions::Array::Concat(g_arr_MastermixNamesForDialog, l_arr_MastermixNames);
      g_arr_MastermixComponentNamesForDialog = HSLExtensions::Array::Concat(g_arr_MastermixComponentNamesForDialog, l_arr_MastermixComponentsNames);
      g_arr_MastermixComponentsVolumesForDialog = HSLExtensions::Array::Concat(g_arr_MastermixComponentsVolumesForDialog, l_arr_MastermixComponentsVolumes);
    }
  }

  private function _GetCarrierIDandSiteID_FromLabID( device & ML_STAR, variable i_str_LabID, variable & o_str_CarrierID, variable & o_str_SiteID ) variable {
    private variable var_return;
    private variable l_labware_ID;
    private variable l_site_ID;
    private variable l_carrier_ID;
    o_str_CarrierID = 0;
    o_str_SiteID = 0;
    var_return = 0;
    l_labware_ID = Translate("");
    l_labware_ID = i_str_LabID;
    l_site_ID = Translate("");
    l_carrier_ID = Translate("");
    {
        object obj_Decklayout;
        obj_Decklayout = ML_STAR.GetDeckLayoutObject();
        if (!obj_Decklayout.IsNull())
            {
                  object EditDecklayout5;
                  object Parameter;
                  object LabwareObjects;
                  object LabwareNames;
                  variable Array_Keys[];
                  variable intCounter;
                  obj_Decklayout.GetObject("IEditDeckLayout5", EditDecklayout5);
                  LabwareObjects.CreateObject("HXPARAMSLib.HxPars");
                  LabwareNames.CreateObject("HXPARAMSLib.HxPars");
                  obj_Decklayout.TemplateLabwareNames(LabwareObjects);
                  Array_Keys = LabwareObjects.GetKeys();
                  for(intCounter=1; intCounter<=Array_Keys.GetSize(); intCounter++)
                  {
                      LabwareNames = LabwareObjects.Item1(intCounter);
                      if(LabwareNames.Item1("Labwr_Id") == l_labware_ID)
                      {
                          var_return = 1;
                          l_site_ID=LabwareNames.Item1("Labwr_DkSiteId");
                          l_carrier_ID=LabwareNames.Item1("Labwr_TemplateId");
                      }
                  }
                  obj_Decklayout.ReleaseObject();
                  EditDecklayout5.ReleaseObject();
                  Parameter.ReleaseObject();
           }
    }
    if (l_carrier_ID == "default")
    {
      o_str_CarrierID = l_labware_ID;
    }
    else
    {
      o_str_CarrierID = l_carrier_ID;
    }
    o_str_SiteID = l_site_ID;
    return (var_return);
  }

  function Add_TipsPlatesAndComfortlids_ToCurrentProcess( variable i_int_NumberOfPlates_MIDI, variable i_int_NumberOfPlates_HSP, variable i_int_NumberOfComfortlids, variable i_int_NumberOfTips_1000, variable i_int_NumberOfTips_300, variable i_int_NumberOfTips_50 ) void {
    g_int_TotalNumberOf1000Tips = g_int_TotalNumberOf1000Tips + i_int_NumberOfTips_1000;
    g_int_TotalNumberOf300Tips = g_int_TotalNumberOf300Tips + i_int_NumberOfTips_300;
    g_int_TotalNumberOf50Tips = g_int_TotalNumberOf50Tips + i_int_NumberOfTips_50;
    g_int_TotalNumberOfHSP = g_int_TotalNumberOfHSP + i_int_NumberOfPlates_HSP;
    g_int_TotalNumberOfMIDI = g_int_TotalNumberOfMIDI + i_int_NumberOfPlates_MIDI;
    g_int_TotalNumberOfComfortLid = g_int_TotalNumberOfComfortLid + i_int_NumberOfComfortlids;
    _Add_ResourceToGlobalArray(ARW_Global::LabwareType::TIP1000, g_int_TotalNumberOf1000Tips, ARW_Global::CarrierType::PLT_TIP1000, Translate("2"));
    if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
    {
      _Add_ResourceToGlobalArray(ARW_Global::LabwareType::TIP300, g_int_TotalNumberOf300Tips, ARW_Global::CarrierType::TIP300_02, Translate("1 to 10"));
      _Add_ResourceToGlobalArray(ARW_Global::LabwareType::TIP50, g_int_TotalNumberOf50Tips, ARW_Global::CarrierType::TIP50_02, Translate("1 to 10"));
    }
    else
    {
      _Add_ResourceToGlobalArray(ARW_Global::LabwareType::TIP300, g_int_TotalNumberOf300Tips, ARW_Global::CarrierType::TIP300_01, Translate("1 to 5"));
      _Add_ResourceToGlobalArray(ARW_Global::LabwareType::TIP50, g_int_TotalNumberOf50Tips, ARW_Global::CarrierType::TIP50_01, Translate("1 to 5"));
    }
    _Add_ResourceToGlobalArray(ARW_Global::LabwareType::MIDI_Plate, g_int_TotalNumberOfMIDI, ARW_Global::CarrierType::PLT_Stack, Translate("1"));
    _Add_ResourceToGlobalArray(ARW_Global::LabwareType::HSP_Plate, g_int_TotalNumberOfHSP, ARW_Global::CarrierType::PLT_Stack, Translate("4"));
    _Add_ResourceToGlobalArray(ARW_Global::LabwareType::Comfortlid, g_int_TotalNumberOfComfortLid, ARW_Global::CarrierType::ODTC, Translate("ComfortLid Rest Position"));
  }

  function Display_Mastermix_Dialog(  ) void {
    private variable l_arr_DistinctMastermixNames[];
    private variable l_int_NumberOfDistinctMastermixNames;
    private variable l_arr_strColumnHeaders[];
    private variable l_int_NumberOfMastermixNames;
    private variable loopCounter1;
    private variable l_arr_Column1Dialog[];
    private variable l_arr_Column2Dialog[];
    private variable l_arr_Column3Dialog[];
    private variable l_int_ReturnSearchIndex;
    private variable l_str_ReagentVolume;
    private variable l_arr_MastermixComponentsNames_Temp[];
    private variable l_arr_MastermixComponentsVolumes_Temp[];
    private variable l_int_NumberOfMastermixComponentsNames_Temp;
    private variable loopCounter2;
    private variable l_str_MastermixComponentVolume;
    private variable l_str_MastermixComponentName;
    private variable l_int_NumberOfContainerThisMastermix;
    private variable l_arr_VolumesPerContainerThisMastermix[];
    private variable l_str_NumberOfContainersAndNameThisMastermix;
    private variable loopCounter3;
    private variable l_intReturnDisplayDialog;
    private variable l_strBottomText;
    private variable l_strFullpathLoadingPicture;
    l_int_NumberOfMastermixNames=g_arr_strMastermixNames.GetSize();
    l_str_NumberOfContainersAndNameThisMastermix = Translate("");
    Util2::Debug::TraceArray_3(Translate("Reagent Name ------ Reagent Volume ------ Reagent Labware"), g_arr_DB_strNameForEachReagent, g_arr_DB_fltTotalVolumeRequiredForEachReagent, g_arr_DB_strLabwareTypeForEachReagent);
    Util2::Debug::TraceArray_3(Translate("Mastermix Name ------ Mastermix Component ------  Volume"), g_arr_MastermixNamesForDialog, g_arr_MastermixComponentNamesForDialog, g_arr_MastermixComponentsVolumesForDialog);
    Util2::Debug::TraceArray_2(Translate("Description --- Volume"), g_arr_DB_strReagentNamePerContainer, g_arr_DB_strDescriptionVolumePerContainer);
    if (l_int_NumberOfMastermixNames > 0)
    {
      VectorCustomDialogs::Initialize();
      l_arr_Column1Dialog.SetSize(0);
      l_arr_Column2Dialog.SetSize(0);
      l_arr_Column3Dialog.SetSize(0);
      ARRAYTOOLS::get_distinct_from_array(g_arr_MastermixNamesForDialog, l_arr_DistinctMastermixNames);
      l_int_NumberOfDistinctMastermixNames=l_arr_DistinctMastermixNames.GetSize();
      {
        for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfDistinctMastermixNames;)
        {
          loopCounter1 = loopCounter1 + 1;
          l_arr_Column1Dialog.AddAsLast(l_arr_DistinctMastermixNames.ElementAt( loopCounter1 -1));
          l_int_ReturnSearchIndex = ARRAYTOOLS::Lookup(g_arr_DB_strNameForEachReagent, l_arr_DistinctMastermixNames.ElementAt( loopCounter1 -1));
          _Reformat_ValuesForDialog(g_arr_DB_fltTotalVolumeRequiredForEachReagent.ElementAt( l_int_ReturnSearchIndex -1), l_str_ReagentVolume);
          l_arr_Column2Dialog.AddAsLast(l_str_ReagentVolume);
          ARRAYTOOLS::ArrayVLookUp(g_arr_DB_strDescriptionVolumePerContainer, g_arr_DB_strReagentNamePerContainer, l_arr_DistinctMastermixNames.ElementAt( loopCounter1 -1), l_arr_VolumesPerContainerThisMastermix);
          l_int_NumberOfContainerThisMastermix=l_arr_VolumesPerContainerThisMastermix.GetSize();
          l_str_NumberOfContainersAndNameThisMastermix = StrConcat4(Translate(""), l_int_NumberOfContainerThisMastermix, Translate("x "), g_arr_DB_strLabwareTypeForEachReagent.ElementAt( l_int_ReturnSearchIndex -1));
          {
            for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfContainerThisMastermix;)
            {
              loopCounter3 = loopCounter3 + 1;
              l_str_NumberOfContainersAndNameThisMastermix = StrConcat4(l_str_NumberOfContainersAndNameThisMastermix, Translate(" ["), l_arr_VolumesPerContainerThisMastermix.ElementAt( loopCounter3 -1), Translate("] "));
            }
          }
          l_arr_Column3Dialog.AddAsLast(l_str_NumberOfContainersAndNameThisMastermix);
          ARRAYTOOLS::ArrayVLookUp(g_arr_MastermixComponentNamesForDialog, g_arr_MastermixNamesForDialog, l_arr_DistinctMastermixNames.ElementAt( loopCounter1 -1), l_arr_MastermixComponentsNames_Temp);
          ARRAYTOOLS::ArrayVLookUp(g_arr_MastermixComponentsVolumesForDialog, g_arr_MastermixNamesForDialog, l_arr_DistinctMastermixNames.ElementAt( loopCounter1 -1), l_arr_MastermixComponentsVolumes_Temp);
          l_int_NumberOfMastermixComponentsNames_Temp=l_arr_MastermixComponentsNames_Temp.GetSize();
          {
            for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfMastermixComponentsNames_Temp;)
            {
              loopCounter2 = loopCounter2 + 1;
              l_str_MastermixComponentName = StrConcat4(Translate(" - - - "), l_arr_MastermixComponentsNames_Temp.ElementAt( loopCounter2 -1), Translate(""), Translate(""));
              l_arr_Column1Dialog.AddAsLast(l_str_MastermixComponentName);
              _Reformat_ValuesForDialog(l_arr_MastermixComponentsVolumes_Temp.ElementAt( loopCounter2 -1), l_str_MastermixComponentVolume);
              l_str_MastermixComponentVolume = StrConcat4(Translate("     "), l_str_MastermixComponentVolume, Translate(""), Translate(""));
              l_arr_Column2Dialog.AddAsLast(l_str_MastermixComponentVolume);
              l_arr_Column3Dialog.AddAsLast(Translate(""));
            }
          }
        }
      }
      Util2::Debug::TraceArray_3(Translate("Dialog Mastermix DATA"), l_arr_Column1Dialog, l_arr_Column2Dialog, l_arr_Column3Dialog);
      l_arr_strColumnHeaders.SetSize(0);
      l_arr_strColumnHeaders.AddAsLast(Translate("Name"));
      l_arr_strColumnHeaders.AddAsLast(Translate("Volume (µL)"));
      l_arr_strColumnHeaders.AddAsLast(Translate("Labware Type and [Volume per tube]"));
      VectorCustomDialogs::LoadingDialogSetResources(l_arr_strColumnHeaders);
      l_strBottomText = StrConcat4(Translate("Click Yes to create file at following directory : "), t_strDirectoryName, Translate(", No to continue without changes"), Translate(""));
      if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
      {
        l_strFullpathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\MasterMix.jpg");
      }
      else
      {
        l_strFullpathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\MasterMix.jpg");
      }
      l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialog(Translate(""), VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Prepare Mastermix according to instructions below. Do you want to print instructions to external file?"), l_strBottomText, l_strFullpathLoadingPicture, Translate(""), 300, l_arr_Column1Dialog, l_arr_Column2Dialog, l_arr_Column3Dialog);
      if (l_intReturnDisplayDialog == 6)
      {
        _PrintToFile(l_arr_Column1Dialog, l_arr_Column2Dialog, l_arr_Column3Dialog);
      }
      VectorCustomDialogs::Terminate();
    }
  }

  function Define_VolumePerWell( variable i_str_LiquidName, variable i_flt_VolumePerSample ) variable {
    private variable l_int_ReturnSearch_Index;
    private variable l_flt_VolumePerSample;
    l_int_ReturnSearch_Index = ARRAYTOOLS::Lookup(g_arr_DefineVolume_LiquidNames, i_str_LiquidName);
    l_flt_VolumePerSample = i_flt_VolumePerSample;
    if (l_int_ReturnSearch_Index > 0)
    {
      i_flt_VolumePerSample = i_flt_VolumePerSample + g_arr_DefineVolume_TotalVolumePerSample.ElementAt( l_int_ReturnSearch_Index -1);
      ARRAYTOOLS::Update_Value_in_Array(g_arr_DefineVolume_TotalVolumePerSample, i_flt_VolumePerSample, l_int_ReturnSearch_Index);
    }
    else
    {
      g_arr_DefineVolume_LiquidNames.AddAsLast(i_str_LiquidName);
      g_arr_DefineVolume_TotalVolumePerSample.AddAsLast(i_flt_VolumePerSample);
    }
    return (l_flt_VolumePerSample);
  }

  function Display_Error_Dialog( variable i_str_ErrorMessage ) void {
    private variable l_int_rtnErrorDialog;
    VectorCustomDialogs::Initialize();
    l_int_rtnErrorDialog = VectorCustomDialogs::ErrorDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, i_str_ErrorMessage, Translate("Press OK to abort run"));
    VectorCustomDialogs::Terminate();
    abort;
  }

  function Define_VolumePerWell_MastermixComponent( variable i_str_MastermixLiquidName, variable i_str_ComponentLiquidName, variable i_flt_VolumePerSample ) void {
    private variable l_int_ReturnSearch_Index;
    private variable l_str_ErrorMessage;
    private variable l_int_ReturnSearch_Index2;
    private variable l_arr_MastermixNames[];
    l_int_ReturnSearch_Index = ARRAYTOOLS::Lookup(g_arr_strMastermixComponentNames, i_str_ComponentLiquidName);
    if (l_int_ReturnSearch_Index > 0)
    {
      ARRAYTOOLS::ArrayVLookUp(g_arr_strMastermixNames, g_arr_strMastermixComponentNames, i_str_ComponentLiquidName, l_arr_MastermixNames);
      l_int_ReturnSearch_Index2 = ARRAYTOOLS::Lookup(l_arr_MastermixNames, i_str_MastermixLiquidName);
      if (l_int_ReturnSearch_Index2 > 0)
      {
        l_str_ErrorMessage = StrConcat12(Translate("Mastermix Component: "), i_str_ComponentLiquidName, Translate(" already exists for Mastermix: "), i_str_MastermixLiquidName, Translate(". Please review the Volume definition for this Mastermix"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        Display_Error_Dialog(l_str_ErrorMessage);
      }
      else
      {
        g_arr_strMastermixComponentNames.AddAsLast(i_str_ComponentLiquidName);
        g_arr_fltMastermixComponentsVolumes.AddAsLast(i_flt_VolumePerSample);
        g_arr_strMastermixNames.AddAsLast(i_str_MastermixLiquidName);
      }
    }
    else
    {
      g_arr_strMastermixComponentNames.AddAsLast(i_str_ComponentLiquidName);
      g_arr_fltMastermixComponentsVolumes.AddAsLast(i_flt_VolumePerSample);
      g_arr_strMastermixNames.AddAsLast(i_str_MastermixLiquidName);
    }
  }

  private function Trace_ALL_GLOBAL_ARRAYS(  ) void {
    private variable l_int_TotalRecordsInGlobalArray;
    private variable loopCounter1;
    private variable l_str_ConcatArrayRecords;
    private file file1;
    private variable file1_g_arr_DB_strReagentNamePerContainer;
    private variable file1_g_arr_DB_strLabwareTypePerContainer;
    private variable file1_g_arr_DB_strCarrierNamePerContainer;
    private variable file1_g_arr_DB_strReagentNameLabwareTypePerContainer;
    private variable file1_g_arr_DB_strReagentTypePerContainer;
    private variable file1_g_arr_DB_fltVolumePerContainer;
    private variable file1_g_arr_DB_strDescriptionVolumePerContainer;
    private variable file1_g_arr_DB_strPositionIdPerContainer;
    private variable l_strFullpathFile;
    Util2::Debug::TraceArray_2(Translate("Volume Definition DATA:"), g_arr_DefineVolume_LiquidNames, g_arr_DefineVolume_TotalVolumePerSample);
    Util2::Debug::TraceArray_3(Translate("Mastermix and Mastermix Components DATA:"), g_arr_MastermixNamesForDialog, g_arr_MastermixComponentNamesForDialog, g_arr_MastermixComponentsVolumesForDialog);
    Util2::Debug::TraceArray_2(Translate("Carrier DATA:"), g_arr_CarrierName, g_arr_CarrierLoadingCondition);
    Util2::Debug::TraceArray_3(Translate("General Reagent DATA: "), g_arr_DB_strNameForEachReagent, g_arr_DB_fltTotalVolumeRequiredForEachReagent, g_arr_DB_strLabwareTypeForEachReagent);
    Util2::Debug::TraceArray_3(Translate("General Reagent DATA per container: "), g_arr_DB_strReagentNamePerContainer, g_arr_DB_fltVolumePerContainer, g_arr_DB_strLabwareTypePerContainer);
    l_int_TotalRecordsInGlobalArray=g_arr_DB_strReagentNamePerContainer.GetSize();
    if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
    {
      l_strFullpathFile = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Files\\CustomDialogFiles\\SummaryGlobalArrays.csv");
    }
    else
    {
      l_strFullpathFile = Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\OxfordNanopore\\LSK109\\Files\\CustomDialogFiles\\SummaryGlobalArrays.csv");
    }
    file1.AddField("g_arr_DB_fltVolumePerContainer", file1_g_arr_DB_fltVolumePerContainer, hslString, 255);
    file1.AddField("g_arr_DB_strCarrierNamePerContainer", file1_g_arr_DB_strCarrierNamePerContainer, hslString, 255);
    file1.AddField("g_arr_DB_strDescriptionVolumePerContainer", file1_g_arr_DB_strDescriptionVolumePerContainer, hslString, 255);
    file1.AddField("g_arr_DB_strLabwareTypePerContainer", file1_g_arr_DB_strLabwareTypePerContainer, hslString, 255);
    file1.AddField("g_arr_DB_strPositionIdPerContainer", file1_g_arr_DB_strPositionIdPerContainer, hslString, 255);
    file1.AddField("g_arr_DB_strReagentNamePerContainer", file1_g_arr_DB_strReagentNamePerContainer, hslString, 255);
    file1.AddField("g_arr_DB_strReagentTypePerContainer", file1_g_arr_DB_strReagentTypePerContainer, hslString, 255);
    file1.AddField("g_arr_DB_strReagentNameLabwareTypePerContainer", file1_g_arr_DB_strReagentNameLabwareTypePerContainer, hslString, 255);
    file1.SetDelimiter(";");
    if( 0 == file1.Open(l_strFullpathFile, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, l_strFullpathFile, "HxMetEdCompCmd");
    }
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_TotalRecordsInGlobalArray;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_str_ConcatArrayRecords = Translate("");
        file1_g_arr_DB_fltVolumePerContainer=g_arr_DB_fltVolumePerContainer.GetAt(loopCounter1-1);
        file1_g_arr_DB_strCarrierNamePerContainer=g_arr_DB_strCarrierNamePerContainer.GetAt(loopCounter1-1);
        file1_g_arr_DB_strDescriptionVolumePerContainer=g_arr_DB_strDescriptionVolumePerContainer.GetAt(loopCounter1-1);
        file1_g_arr_DB_strLabwareTypePerContainer=g_arr_DB_strLabwareTypePerContainer.GetAt(loopCounter1-1);
        file1_g_arr_DB_strPositionIdPerContainer=g_arr_DB_strPositionIdPerContainer.GetAt(loopCounter1-1);
        file1_g_arr_DB_strReagentNameLabwareTypePerContainer=g_arr_DB_strReagentNameLabwareTypePerContainer.GetAt(loopCounter1-1);
        file1_g_arr_DB_strReagentNamePerContainer=g_arr_DB_strReagentNamePerContainer.GetAt(loopCounter1-1);
        file1_g_arr_DB_strReagentTypePerContainer=g_arr_DB_strReagentTypePerContainer.GetAt(loopCounter1-1);
        if( 0 == file1.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
  }

  function Load_Carrier( device & ML_STAR, variable i_str_CarrierID, variable i_bln_SkipLoadingRoutine, variable i_bln_IsItLoadable, variable i_str_ImageFullPath ) variable {
    private variable l_arr_DataColumn1[];
    private variable l_arr_DataColumn2[];
    private variable l_arr_DataColumn3[];
    private variable l_int_ReturnSearchIndex;
    private variable l_int_LengthImageFilePath;
    private variable l_bln_CarrierLoaded;
    private variable l_strStepRetrunValueLoadCarrier;
    private variable l_intReturnValueFindSubString;
    l_bln_CarrierLoaded = ASWGLOBAL::BOOL::FALSE;
    Util2::Debug::TraceArray(Translate("*******************************   g_arr_CarrierName: "), g_arr_CarrierName);
    l_int_ReturnSearchIndex = ARRAYTOOLS::Lookup(g_arr_CarrierName, i_str_CarrierID);
    Trace("result for searching carrier ID : ",l_int_ReturnSearchIndex);
    if (l_int_ReturnSearchIndex != 0)
    {
      if (g_arr_CarrierLoadingCondition.ElementAt( l_int_ReturnSearchIndex -1) == ASWGLOBAL::BOOL::TRUE)
      {
        if (i_bln_SkipLoadingRoutine != ASWGLOBAL::BOOL::TRUE)
        {
          if (i_bln_IsItLoadable == ASWGLOBAL::BOOL::TRUE)
          {
            ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
          }
        }
        l_int_LengthImageFilePath = StrGetLength(i_str_ImageFullPath);
        if (l_int_LengthImageFilePath != 0)
        {
          ARRAYTOOLS::ArrayVLookUp(g_arr_DB_strPositionIdPerContainer, g_arr_DB_strCarrierNamePerContainer, i_str_CarrierID, l_arr_DataColumn1);
          ARRAYTOOLS::ArrayVLookUp(g_arr_DB_strDescriptionVolumePerContainer, g_arr_DB_strCarrierNamePerContainer, i_str_CarrierID, l_arr_DataColumn2);
          ARRAYTOOLS::ArrayVLookUp(g_arr_DB_strReagentNameLabwareTypePerContainer, g_arr_DB_strCarrierNamePerContainer, i_str_CarrierID, l_arr_DataColumn3);
          Trace_ALL_GLOBAL_ARRAYS();
          _Display_LoadCarrier_Dialog(i_str_ImageFullPath, Translate(""), Translate(""), l_arr_DataColumn1, l_arr_DataColumn2, l_arr_DataColumn3);
          if (i_bln_SkipLoadingRoutine != ASWGLOBAL::BOOL::TRUE)
          {
            if (i_bln_IsItLoadable == ASWGLOBAL::BOOL::TRUE)
            {
              l_intReturnValueFindSubString = StrFind(i_str_CarrierID, Translate("TIP"));
              if (l_intReturnValueFindSubString >= 0)
              {
                MECC::TraceComment(Translate("Substring \"Tip\" found within Carrier ID to be loaded --> load carrier will be ignored as within the main method the tip edit command will be performed prior to the loading of the carrier command"));
              }
              else
              {
                MECC::TraceComment(Translate("No substring \"Tip\" found within Carrier ID to be loaded --> load carrier will be executed"));
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
                }
                _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
              }
            }
          }
          return (ASWGLOBAL::BOOL::TRUE);
        }
        else
        {
          if (i_bln_SkipLoadingRoutine != ASWGLOBAL::BOOL::TRUE)
          {
            if (i_bln_IsItLoadable == ASWGLOBAL::BOOL::TRUE)
            {
              l_intReturnValueFindSubString = StrFind(i_str_CarrierID, Translate("TIP"));
              if (l_intReturnValueFindSubString >= 0)
              {
                MECC::TraceComment(Translate("Substring \"Tip\" found within Carrier ID to be loaded --> load carrier will be ignored as within the main method the tip edit command will be performed prior to the loading of the carrier command"));
              }
              else
              {
                MECC::TraceComment(Translate("No substring \"Tip\" found within Carrier ID to be loaded --> load carrier will be executed"));
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
                }
                _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
              }
            }
          }
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
      else
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    else
    {
      MECC::TraceComment(Translate("Carrier ID not found withing ARW list (HSL file) --> no loading will be performed!\nHint : If you want to use this command with a new carrier : update first your HSL file..."));
    }
  }

  private function _Display_LoadCarrier_Dialog( variable i_str_ImagePath, variable i_str_SmallImagePath, variable i_str_TextTop, variable & i_arr_DataColumn1[], variable & i_arr_DataColumn2[], variable & i_arr_DataColumn3[] ) void {
    private variable l_arr_ColumnHeaders[];
    private variable l_intReturnDisplayDialog;
    VectorCustomDialogs::Initialize();
    l_arr_ColumnHeaders.SetSize(0);
    l_arr_ColumnHeaders.AddAsLast(Translate("Position"));
    l_arr_ColumnHeaders.AddAsLast(Translate("Quantity Or Volume"));
    l_arr_ColumnHeaders.AddAsLast(Translate("Description"));
    VectorCustomDialogs::LoadingDialogSetResources(l_arr_ColumnHeaders);
    l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, i_str_TextTop, Translate("Press OK to Continue, Cancel to Abort"), i_str_ImagePath, i_str_SmallImagePath, 0, i_arr_DataColumn1, i_arr_DataColumn2, i_arr_DataColumn3);
    if (l_intReturnDisplayDialog == 2)
    {
      abort;
    }
    VectorCustomDialogs::Terminate();
  }

  private function _GenerateString( variable i_flt_Volume, variable & o_str_Description ) void {
    private variable l_str_TotalVolumePerContainer;
    private variable l_str_UnitsVolume;
    private variable l_flt_TotalVolumePerContainerML;
    o_str_Description = 0;
    if (i_flt_Volume > 3000)
    {
      l_str_UnitsVolume = Translate("mL");
      l_flt_TotalVolumePerContainerML = i_flt_Volume / (1000 * 1.0);
      _Reformat_ValuesForDialog(l_flt_TotalVolumePerContainerML, l_str_TotalVolumePerContainer);
    }
    else
    {
      _Reformat_ValuesForDialog(i_flt_Volume, l_str_TotalVolumePerContainer);
      l_str_UnitsVolume = Translate("µL");
    }
    o_str_Description = StrConcat12(Translate(""), l_str_TotalVolumePerContainer, Translate(""), l_str_UnitsVolume, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  }

  private function _Add_ResourceToGlobalArray( variable i_strLabwareType, variable i_intNumberOfElementsForThisResource, variable i_strCarrierType, variable i_strPositionIdForThisResource ) void {
    private variable l_int_ReturnSearchIndex;
    private variable l_strNumberOfElementsForThisResource;
    _ConvertValueToString(i_intNumberOfElementsForThisResource, l_strNumberOfElementsForThisResource);
    l_int_ReturnSearchIndex = ARRAYTOOLS::Lookup(g_arr_DB_strReagentNameLabwareTypePerContainer, i_strLabwareType);
    if (l_int_ReturnSearchIndex == 0)
    {
      TrcTrace12(Translate("------------ Adding to global arrays: "), Translate(""), i_strLabwareType, Translate("    "), i_strCarrierType, Translate("    "), l_strNumberOfElementsForThisResource, Translate("    "), i_strPositionIdForThisResource, Translate("    "), Translate("    "), Translate("    "));
      g_arr_DB_strDescriptionVolumePerContainer.AddAsLast(l_strNumberOfElementsForThisResource);
      g_arr_DB_strCarrierNamePerContainer.AddAsLast(i_strCarrierType);
      g_arr_DB_strPositionIdPerContainer.AddAsLast(i_strPositionIdForThisResource);
      g_arr_DB_strReagentNameLabwareTypePerContainer.AddAsLast(i_strLabwareType);
      g_arr_DB_fltVolumePerContainer.AddAsLast(0);
      g_arr_DB_strLabwareTypePerContainer.AddAsLast(Translate(""));
      g_arr_DB_strReagentTypePerContainer.AddAsLast(Translate(""));
      g_arr_DB_strReagentNamePerContainer.AddAsLast(Translate(""));
    }
    else
    {
      ARRAYTOOLS::Update_Value_in_Array(g_arr_DB_strDescriptionVolumePerContainer, l_strNumberOfElementsForThisResource, l_int_ReturnSearchIndex);
    }
  }

  function Add_InputPlate_LoadingPositionOnDeck_ToCurrentProcess( variable i_str_Plate_Name, sequence i_seq_Template, device & ML_STAR ) void {
    private variable l_str_LabwareId;
    private variable l_str_CarrierID;
    private variable l_str_SiteID;
    l_str_LabwareId = SeqGetLabwareId(i_seq_Template);
    _GetCarrierIDandSiteID_FromLabID(ML_STAR, l_str_LabwareId, l_str_CarrierID, l_str_SiteID);
    _Add_InputPlateToGlobalArray(l_str_CarrierID, l_str_SiteID, i_str_Plate_Name);
  }

  private function _Add_InputPlateToGlobalArray( variable i_str_CarrierID, variable i_str_SiteID, variable i_str_InputPlateName ) void {
    private variable l_int_ReturnSearchIndex;
    l_int_ReturnSearchIndex = ARRAYTOOLS::Lookup(g_arr_DB_strReagentNameLabwareTypePerContainer, i_str_InputPlateName);
    if (l_int_ReturnSearchIndex == 0)
    {
      TrcTrace12(Translate("------------ Adding to global arrays: "), i_str_InputPlateName, Translate("    "), i_str_CarrierID, Translate("    "), i_str_SiteID, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      g_arr_DB_strCarrierNamePerContainer.AddAsLast(i_str_CarrierID);
      g_arr_DB_strPositionIdPerContainer.AddAsLast(i_str_SiteID);
      g_arr_DB_strDescriptionVolumePerContainer.AddAsLast(Translate("1"));
      g_arr_DB_strReagentNameLabwareTypePerContainer.AddAsLast(i_str_InputPlateName);
      g_arr_DB_fltVolumePerContainer.AddAsLast(0);
      g_arr_DB_strLabwareTypePerContainer.AddAsLast(Translate(""));
      g_arr_DB_strReagentTypePerContainer.AddAsLast(Translate(""));
      g_arr_DB_strReagentNamePerContainer.AddAsLast(Translate(""));
    }
  }

  private function _Add_IndexesToGlobalArray( variable i_str_CarrierID, variable & i_arr_strPositionID[], variable & i_arr_strDescriptionID[] ) void {
    private variable l_int_NumberOfIndexDescriptions;
    private variable loopCounter1;
    l_int_NumberOfIndexDescriptions=i_arr_strDescriptionID.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfIndexDescriptions;)
      {
        loopCounter1 = loopCounter1 + 1;
        g_arr_DB_strCarrierNamePerContainer.AddAsLast(i_str_CarrierID);
        g_arr_DB_strPositionIdPerContainer.AddAsLast(i_arr_strPositionID.ElementAt( loopCounter1 -1));
        g_arr_DB_strDescriptionVolumePerContainer.AddAsLast(Translate("1"));
        g_arr_DB_strReagentNameLabwareTypePerContainer.AddAsLast(i_arr_strDescriptionID.ElementAt( loopCounter1 -1));
        g_arr_DB_fltVolumePerContainer.AddAsLast(Translate(""));
        g_arr_DB_strLabwareTypePerContainer.AddAsLast(Translate(""));
        g_arr_DB_strReagentTypePerContainer.AddAsLast(Translate(""));
        g_arr_DB_strReagentNamePerContainer.AddAsLast(Translate(""));
      }
    }
  }

  function Add_Indexes_ToCurrentProcess( device & ML_STAR, variable & i_arr_Index1_Name[], variable & i_arr_Index2_Name[], variable & i_arr_Index1_Positions[], variable & i_arr_Index2_Positions[], sequence & i_seq_Template ) void {
    private variable l_str_CarrierID;
    private variable l_str_LabwareId;
    private variable l_str_SiteID;
    private variable l_arr_strIndexDescription[];
    private variable l_arr_strIndexPosition[];
    g_bln_IndexesAreNeeded = ASWGLOBAL::BOOL::TRUE;
    l_str_LabwareId = SeqGetLabwareId(i_seq_Template);
    _GetCarrierIDandSiteID_FromLabID(ML_STAR, l_str_LabwareId, l_str_CarrierID, l_str_SiteID);
    l_arr_strIndexPosition.SetSize(0);
    l_arr_strIndexDescription.SetSize(0);
    l_arr_strIndexPosition.AddAsLast(l_str_SiteID);
    l_arr_strIndexDescription.AddAsLast(Translate("Index Plate"));
    _Add_IndexesToGlobalArray(l_str_CarrierID, l_arr_strIndexPosition, l_arr_strIndexDescription);
  }

  private function _Version_History(  ) void {
  }

  function Display_MultipleChoice_Dialog( variable i_int_DialogID ) void {
    private variable l_arr_DB_MultipleChoiceDialog_Labels[];
    private variable l_arr_DB_MultipleChoiceDialog_IsEditable[];
    private variable l_arr_DB_MultipleChoiceDialog_IsSelected[];
    private variable l_arr_DB_MultipleChoiceDialog_GroupNames[];
    private variable l_arr_DB_MultipleChoiceDialog_ToolTips[];
    private variable l_int_NumberOfChoices;
    private variable loopCounter1;
    private variable l_int_NumberOfLabelsForThisGroup;
    private variable l_str_Current_IsSelected;
    private variable l_str_Current_Label;
    private variable l_int_GlobalNumberOfChoices;
    private variable l_int_ReturnSearchFunction;
    private variable loopCounter2;
    private variable l_str_Current_GroupName;
    private variable l_arr_temp1_DB_MultipleChoiceDialog_Labels[];
    VectorCustomDialogs::Initialize();
    if(0){
      VectorCustomDialogs::ImageRadioButtonDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, Translate(""), Translate(""), g_arr_DB_MultipleChoiceDialog_Labels, g_arr_DB_MultipleChoiceDialog_ToolTips, g_arr_DB_MultipleChoiceDialog_IsEditable, g_arr_DB_MultipleChoiceDialog_ImageFilePathsPerLabel, g_arr_DB_MultipleChoiceDialog_ImageHeight, g_arr_DB_MultipleChoiceDialog_ImageWidth, g_arr_DB_MultipleChoiceDialog_IsSelected, g_arr_DB_MultipleChoiceDialog_GroupNames, VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Horizontal, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
      VectorCustomDialogs::RadioButtonDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 300, Translate("Settings"), Translate("Press OK to Continue, Cancel to abort"), g_arr_DB_MultipleChoiceDialog_Labels, g_arr_DB_MultipleChoiceDialog_ToolTips, g_arr_DB_MultipleChoiceDialog_IsEditable, g_arr_DB_MultipleChoiceDialog_IsSelected, g_arr_DB_MultipleChoiceDialog_GroupNames, VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    }
    ARRAYTOOLS::ArrayVLookUp(g_arr_DB_MultipleChoiceDialog_GroupNames, g_arr_DB_MultipleChoiceDialog_DialogID, i_int_DialogID, l_arr_DB_MultipleChoiceDialog_GroupNames);
    ARRAYTOOLS::ArrayVLookUp(g_arr_DB_MultipleChoiceDialog_IsTempSelected, g_arr_DB_MultipleChoiceDialog_DialogID, i_int_DialogID, l_arr_DB_MultipleChoiceDialog_IsSelected);
    ARRAYTOOLS::ArrayVLookUp(g_arr_DB_MultipleChoiceDialog_IsEditable, g_arr_DB_MultipleChoiceDialog_DialogID, i_int_DialogID, l_arr_DB_MultipleChoiceDialog_IsEditable);
    ARRAYTOOLS::ArrayVLookUp(g_arr_DB_MultipleChoiceDialog_ToolTips, g_arr_DB_MultipleChoiceDialog_DialogID, i_int_DialogID, l_arr_DB_MultipleChoiceDialog_ToolTips);
    ARRAYTOOLS::ArrayVLookUp(g_arr_DB_MultipleChoiceDialog_Labels, g_arr_DB_MultipleChoiceDialog_DialogID, i_int_DialogID, l_arr_DB_MultipleChoiceDialog_Labels);
    VectorCustomDialogs::RadioButtonDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 300, Translate("Settings"), Translate("Press OK to Continue, Cancel to abort"), l_arr_DB_MultipleChoiceDialog_Labels, l_arr_DB_MultipleChoiceDialog_ToolTips, l_arr_DB_MultipleChoiceDialog_IsEditable, l_arr_DB_MultipleChoiceDialog_IsSelected, l_arr_DB_MultipleChoiceDialog_GroupNames, VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    l_int_NumberOfChoices=l_arr_DB_MultipleChoiceDialog_IsSelected.GetSize();
    l_int_GlobalNumberOfChoices=g_arr_DB_MultipleChoiceDialog_IsSelected.GetSize();
    if(0){
      {
        for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfChoices;)
        {
          loopCounter1 = loopCounter1 + 1;
          l_str_Current_GroupName=l_arr_DB_MultipleChoiceDialog_GroupNames.GetAt(loopCounter1-1);
          {
            for(loopCounter2 = 0; loopCounter2 < l_int_GlobalNumberOfChoices;)
            {
              loopCounter2 = loopCounter2 + 1;
              ARRAYTOOLS::ArrayVLookUp(g_arr_DB_MultipleChoiceDialog_Labels, g_arr_DB_MultipleChoiceDialog_GroupNames, l_str_Current_GroupName, l_arr_temp1_DB_MultipleChoiceDialog_Labels);
              l_int_NumberOfLabelsForThisGroup=l_arr_temp1_DB_MultipleChoiceDialog_Labels.GetSize();
              if (l_int_NumberOfLabelsForThisGroup != 0)
              {
                l_str_Current_Label=l_arr_DB_MultipleChoiceDialog_Labels.GetAt(loopCounter1-1);
                l_int_ReturnSearchFunction = ARRAYTOOLS::Lookup(g_arr_DB_MultipleChoiceDialog_Labels, l_str_Current_Label);
                if (l_int_ReturnSearchFunction != 0)
                {
                  l_str_Current_IsSelected=l_arr_DB_MultipleChoiceDialog_IsSelected.GetAt(loopCounter1-1);
                  ARRAYTOOLS::Update_Value_in_Array(g_arr_DB_MultipleChoiceDialog_IsSelected, l_str_Current_IsSelected, l_int_ReturnSearchFunction);
                }
              }
            }
          }
        }
      }
    }
    g_arr_DB_MultipleChoiceDialog_IsSelected = HSLExtensions::Array::Concat(g_arr_DB_MultipleChoiceDialog_IsSelected, l_arr_DB_MultipleChoiceDialog_IsSelected);
    if(0){
      g_arr_DB_MultipleChoiceDialog_IsSelected=l_arr_DB_MultipleChoiceDialog_IsSelected;
    }
    Util2::Debug::TraceArray(Translate("----------- Selection: Settings Dialog: l_arr_DB_MultipleChoiceDialog_IsSelected: "), l_arr_DB_MultipleChoiceDialog_IsSelected);
    Util2::Debug::TraceArray(Translate("----------- Selection: Settings Dialog: g_arr_DB_MultipleChoiceDialog_IsSelected: "), g_arr_DB_MultipleChoiceDialog_IsSelected);
    VectorCustomDialogs::Terminate();
  }

  function MultipleChoiceDialog_RetrieveUserSelection( variable i_int_DialogID, variable i_str_GroupName, variable & o_int_OptionSelected ) void {
    private variable l_arr_DB_MultipleChoiceDialog_IsSelected[];
    private variable l_intNumberOfGroupNamesForThisDialog;
    private variable l_intCoincidence;
    private variable loopCounter1;
    private variable l_arr_DB_MultipleChoiceDialog_GroupNames[];
    o_int_OptionSelected = 0;
    Util2::Debug::TraceArray_3(Translate("Multple Choice Dialog: GROUP NAME        LABEL     SELECTION"), g_arr_DB_MultipleChoiceDialog_GroupNames, g_arr_DB_MultipleChoiceDialog_Labels, g_arr_DB_MultipleChoiceDialog_IsSelected);
    if(0){
      ARRAYTOOLS::ArrayVLookUp(g_arr_DB_MultipleChoiceDialog_IsSelected, g_arr_DB_MultipleChoiceDialog_DialogID, i_int_DialogID, l_arr_DB_MultipleChoiceDialog_IsSelected);
      o_int_OptionSelected = ARRAYTOOLS::Lookup(l_arr_DB_MultipleChoiceDialog_IsSelected, 1);
    }
    ARRAYTOOLS::ArrayVLookUp(g_arr_DB_MultipleChoiceDialog_GroupNames, g_arr_DB_MultipleChoiceDialog_DialogID, i_int_DialogID, l_arr_DB_MultipleChoiceDialog_GroupNames);
    if(0){
      l_intNumberOfGroupNamesForThisDialog=l_arr_DB_MultipleChoiceDialog_GroupNames.GetSize();
    }
    l_intNumberOfGroupNamesForThisDialog=g_arr_DB_MultipleChoiceDialog_GroupNames.GetSize();
    Trace("l_intNumberOfGroupNamesForThisDialog : ", l_intNumberOfGroupNamesForThisDialog);
    l_intCoincidence = 0;
    {
      for(loopCounter1 = 0; loopCounter1 < l_intNumberOfGroupNamesForThisDialog;)
      {
        loopCounter1 = loopCounter1 + 1;
        Trace("Now looking for Group Name: ", i_str_GroupName);
        if (i_str_GroupName == g_arr_DB_MultipleChoiceDialog_GroupNames.ElementAt( loopCounter1 -1))
        {
          l_intCoincidence = l_intCoincidence + 1;
          if (g_arr_DB_MultipleChoiceDialog_IsSelected.ElementAt( loopCounter1 -1) == 1)
          {
            o_int_OptionSelected = l_intCoincidence;
            l_intCoincidence = 0;
            break;
          }
        }
      }
    }
    Trace("Group name selected : ",i_str_GroupName, " - Option selected : ",o_int_OptionSelected);
  }

  function Retrieve_50mlTrough_ReagentsVolumesAndSequences( variable & o_arr_ReagentNames[], variable & o_arr_ReagentTotalVolumes[], sequence & o_arr_ReagentSequences[] ) void {
    o_arr_ReagentNames.SetSize( 0);
    o_arr_ReagentTotalVolumes.SetSize( 0);
    o_arr_ReagentSequences.SetSize( 0);
    ARRAYTOOLS::ArrayVLookUp(g_arr_DB_strReagentNamePerContainer, g_arr_DB_strLabwareTypePerContainer, ARW_Global::LabwareType::HamiltonTrough50mL, o_arr_ReagentNames);
    ARRAYTOOLS::ArrayVLookUp(g_arr_DB_fltVolumePerContainer, g_arr_DB_strLabwareTypePerContainer, ARW_Global::LabwareType::HamiltonTrough50mL, o_arr_ReagentTotalVolumes);
    ARRAYTOOLS::ArraySeqVLookUp(g_arr_DB_seqSequenceToAspirateForEachReagent, g_arr_DB_strLabwareTypeForEachReagent, ARW_Global::LabwareType::HamiltonTrough50mL, o_arr_ReagentSequences);
  }

  function Evaluate_ResourcesByCarrier( device & ML_STAR ) void {
    private variable l_int_NumberOfLabIds;
    private variable l_int_NumberOfResourceSequences;
    private variable l_in_ReturnSearchIndex;
    private variable l_int_NumberOfCarriersToLoadFromAspirateSequences;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable l_site_ID;
    private variable l_carrier_ID;
    private variable l_labware_ID;
    private sequence l_seq_Temp;
    private variable l_arr_LabIdsFromTempSeq[];
    private variable l_arr_CarriersToLoadBasedOnResources_Distinct[];
    private variable l_arr_strCarrierNameForALP[];
    private variable l_arr_CarriersToLoadBasedOnResources[];
    private variable l_int_ALPInArray;
    g_arr_CarrierName.AddAsLast(ARW_Global::CarrierType::PLT_TIP1000);
    if (g_int_TotalNumberOf1000Tips != 0)
    {
      g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      if (g_bln_IndexesOnPlate == ASWGLOBAL::BOOL::TRUE)
      {
        g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::TRUE);
      }
      else
      {
        g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::FALSE);
      }
    }
    g_arr_CarrierName.AddAsLast(ARW_Global::CarrierType::Vial_Carrier32_02);
    g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::FALSE);
    g_arr_CarrierName.AddAsLast(ARW_Global::CarrierType::ODTC);
    if (g_int_TotalNumberOfComfortLid != 0)
    {
      g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::FALSE);
    }
    g_arr_CarrierName.AddAsLast(ARW_Global::CarrierType::PLT_Stack);
    if (g_int_TotalNumberOfHSP != 0)
    {
      g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      if (g_int_TotalNumberOfMIDI != 0)
      {
        g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::TRUE);
      }
      else
      {
        g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::FALSE);
      }
    }
    g_arr_CarrierName.AddAsLast(ARW_Global::CarrierType::TIP50_01);
    g_arr_CarrierName.AddAsLast(ARW_Global::CarrierType::TIP50_02);
    if (g_int_TotalNumberOf50Tips != 0)
    {
      g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::TRUE);
      g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::FALSE);
      g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::FALSE);
    }
    g_arr_CarrierName.AddAsLast(ARW_Global::CarrierType::TIP300_01);
    g_arr_CarrierName.AddAsLast(ARW_Global::CarrierType::TIP300_02);
    if (g_int_TotalNumberOf300Tips != 0)
    {
      g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::TRUE);
      g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::FALSE);
      g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::FALSE);
    }
    l_arr_CarriersToLoadBasedOnResources.SetSize(0);
    l_int_NumberOfResourceSequences=g_arr_DB_seqSequenceToAspirateForEachReagent.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfResourceSequences;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_seq_Temp=g_arr_DB_seqSequenceToAspirateForEachReagent.GetAt(loopCounter1-1);
        if(0){
          TrcTraceSequence(l_seq_Temp);
        }
        SeqGetLabwareIds(l_seq_Temp, l_arr_LabIdsFromTempSeq);
        l_int_NumberOfLabIds=l_arr_LabIdsFromTempSeq.GetSize();
        {
          for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfLabIds;)
          {
            loopCounter2 = loopCounter2 + 1;
            l_labware_ID=l_arr_LabIdsFromTempSeq.GetAt(loopCounter2-1);
            _GetCarrierIDandSiteID_FromLabID(ML_STAR, l_labware_ID, l_carrier_ID, l_site_ID);
            l_arr_CarriersToLoadBasedOnResources.AddAsLast(l_carrier_ID);
            TrcTrace(Translate(" ----------- l_site_ID: "), l_site_ID);
          }
        }
      }
    }
    ARRAYTOOLS::get_distinct_from_array(l_arr_CarriersToLoadBasedOnResources, l_arr_CarriersToLoadBasedOnResources_Distinct);
    if(0){
      Util2::Debug::TraceArray(Translate("l_arr_CarriersToLoadBasedOnResources_Distinct: "), l_arr_CarriersToLoadBasedOnResources_Distinct);
    }
    l_int_NumberOfCarriersToLoadFromAspirateSequences=l_arr_CarriersToLoadBasedOnResources_Distinct.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfCarriersToLoadFromAspirateSequences;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_in_ReturnSearchIndex = ARRAYTOOLS::Lookup(g_arr_CarrierName, l_arr_CarriersToLoadBasedOnResources_Distinct.ElementAt( loopCounter1 -1));
        if (l_in_ReturnSearchIndex != 0)
        {
          ARRAYTOOLS::Update_Value_in_Array(g_arr_CarrierLoadingCondition, ASWGLOBAL::BOOL::TRUE, l_in_ReturnSearchIndex);
        }
        else
        {
          g_arr_CarrierName.AddAsLast(l_arr_CarriersToLoadBasedOnResources_Distinct.ElementAt( loopCounter1 -1));
          g_arr_CarrierLoadingCondition.AddAsLast(ASWGLOBAL::BOOL::TRUE);
        }
      }
    }
    ARRAYTOOLS::ArrayVLookUp(g_arr_DB_strCarrierNamePerContainer, g_arr_DB_strReagentNameLabwareTypePerContainer, Translate("ALP Plate"), l_arr_strCarrierNameForALP);
    l_int_ALPInArray=l_arr_strCarrierNameForALP.GetSize();
    if (l_int_ALPInArray != 0)
    {
      l_in_ReturnSearchIndex = ARRAYTOOLS::Lookup(g_arr_CarrierName, l_arr_strCarrierNameForALP.ElementAt( 1 -1));
      if (l_in_ReturnSearchIndex != 0)
      {
        ARRAYTOOLS::Update_Value_in_Array(g_arr_CarrierLoadingCondition, ASWGLOBAL::BOOL::TRUE, l_in_ReturnSearchIndex);
      }
    }
  }

  function Read_InputWorklist_ExcelOrCSVFormat( variable i_strSamplePlateFile, sequence i_seqSourceALPTemplate, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & o_arrIndex1SeqPositions[], variable & o_arrIndex1IDs[], variable & o_arrIndex2SeqPositions[], variable & o_arrIndex2IDs[], variable & o_arrALPseqLabID[], variable & o_arrALPseqPositions[], variable & o_strIndexLabwareFormat ) void {
    private variable l_fileInputWkl_Sample_ID;
    private variable l_intReturnFromArray;
    private variable l_intSizeArrIndex1Positions;
    private variable l_intCountRows;
    private variable l_intSizeArrIndex2Positions;
    private variable l_fileInputWkl_Index2_ID;
    private variable l_fileInputWkl_Index1_Pos;
    private variable l_fileInputWkl_Index2_Pos;
    private variable l_fileInputWkl_Index1_ID;
    private variable l_fileInputWkl_Sample_Position;
    private variable l_strCoordinate;
    private variable l_blnPositionFound;
    private variable l_intCountColumns;
    private variable l_strFileTypeExtension;
    private variable l_strTempLabIDSrcSeq;
    private variable l_strDisplayTextToStatusWindow;
    private variable l_intCountWorkListLines;
    private file l_hdlFileInputWorkList;
    private variable io_arrSampleSeqPositions[];
    private variable l_arr_strCoordinateLetter[];
    private variable l_arr_strCoordinates[];
    private variable io_arrSampleID[];
    private variable io_arrIndex1ID[];
    private variable io_arrIndex2ID[];
    private variable l_intCountWorkListLinesTrace;
    o_intNumberOfSamples = 0;
    o_intIndexesUsedSetting = 0;
    o_strIndexLabwareFormat = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_ReadInputWorklistExcelFormat <<<<<<<<<<"));
    i_seqSourceALPTemplate.SetCurrentPosition(1);
    l_strTempLabIDSrcSeq = SeqGetLabwareId(i_seqSourceALPTemplate);
    io_arrSampleID.SetSize(0);
    io_arrSampleSeqPositions.SetSize(0);
    io_arrIndex1ID.SetSize(0);
    o_arrIndex1SeqPositions.SetSize(0);
    io_arrIndex2ID.SetSize(0);
    o_arrIndex2SeqPositions.SetSize(0);
    o_arrALPseqLabID.SetSize(0);
    l_strFileTypeExtension = HSLExtensions::File::GetFileExtension(i_strSamplePlateFile);
    l_strDisplayTextToStatusWindow = StrConcat2(Translate("Read input worklist : "), i_strSamplePlateFile);
    VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    if (l_strFileTypeExtension == "csv")
    {
      onerror goto errLabel_1 ;
      err.Clear();
      l_hdlFileInputWorkList.AddField("Sample_ID", l_fileInputWkl_Sample_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Sample_Position", l_fileInputWkl_Sample_Position, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index1_ID", l_fileInputWkl_Index1_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index1_Pos", l_fileInputWkl_Index1_Pos, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index2_ID", l_fileInputWkl_Index2_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index2_Pos", l_fileInputWkl_Index2_Pos, hslString, 255);
      l_hdlFileInputWorkList.SetDelimiter(";");
      if( 0 == l_hdlFileInputWorkList.Open(i_strSamplePlateFile, hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strSamplePlateFile, "HxMetEdCompCmd");
      }
      errLabel_1 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        Display_Error_Dialog(Translate("Protocol cannot open Input Worklist (CSV format). Please review file structure and content. System will abort"));
      }   /* end if from skip handler if no error */
    }
    if (l_strFileTypeExtension == "xls")
    {
      onerror goto errLabel_2 ;
      err.Clear();
      l_hdlFileInputWorkList.AddField("Sample_ID", l_fileInputWkl_Sample_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Sample_Position", l_fileInputWkl_Sample_Position, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index1_ID", l_fileInputWkl_Index1_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index1_Pos", l_fileInputWkl_Index1_Pos, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index2_ID", l_fileInputWkl_Index2_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index2_Pos", l_fileInputWkl_Index2_Pos, hslString, 255);
      if( 0 == l_hdlFileInputWorkList.Open(i_strSamplePlateFile + " " + "Sheet1$", hslRead, "Select * from [Sheet1$] where [Sample_Position] is not null") )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strSamplePlateFile, "HxMetEdCompCmd");
      }
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        Display_Error_Dialog(Translate("Protocol cannot open Input Worklist (XLS format). Please review file structure and content. System will abort"));
      }   /* end if from skip handler if no error */
    }
    if (l_strFileTypeExtension != "xls")
    {
      if (l_strFileTypeExtension != "csv")
      {
        Display_Error_Dialog(Translate("Protocol cannot open Input Worklist (Not supported format). Please review file structure and content. System will abort"));
      }
    }
    {
      l_intCountWorkListLines = 0;
      while (
         (l_hdlFileInputWorkList.Eof() == 0)
      )
      {
        l_intCountWorkListLines = l_intCountWorkListLines + 1;
        l_intCountWorkListLinesTrace = l_intCountWorkListLines;
        if( 0 == l_hdlFileInputWorkList.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (l_fileInputWkl_Sample_Position != "")
        {
          io_arrSampleID.AddAsLast(l_fileInputWkl_Sample_ID);
          o_arrALPseqLabID.AddAsLast(l_strTempLabIDSrcSeq);
          o_arrALPseqPositions.AddAsLast(l_fileInputWkl_Sample_Position);
          o_arrIndex1IDs.AddAsLast(l_fileInputWkl_Index1_ID);
          o_arrIndex1SeqPositions.AddAsLast(l_fileInputWkl_Index1_Pos);
          o_arrIndex2IDs.AddAsLast(l_fileInputWkl_Index2_ID);
          o_arrIndex2SeqPositions.AddAsLast(l_fileInputWkl_Index2_Pos);
        }
      }
    }
    APPSLIB::TraceValues(Translate("Records in Excel File: "), l_intCountWorkListLinesTrace, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Util2::Debug::TraceArray_3(Translate(" Arrays of Positions for Samples and Indexes"), o_arrALPseqPositions, o_arrIndex1SeqPositions, o_arrIndex2SeqPositions);
    Util2::Debug::TraceArray_3(Translate(" Arrays of ID for Samples and Indexes"), io_arrSampleID, o_arrIndex1IDs, o_arrIndex2IDs);
    l_arr_strCoordinateLetter.SetSize(0);
    l_arr_strCoordinateLetter.AddAsLast(Translate("A"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("B"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("C"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("D"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("E"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("F"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("G"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("H"));
    l_arr_strCoordinates.SetSize(0);
    {
      for(l_intCountColumns = 0; l_intCountColumns < 12;)
      {
        l_intCountColumns = l_intCountColumns + 1;
        {
          for(l_intCountRows = 0; l_intCountRows < 8;)
          {
            l_intCountRows = l_intCountRows + 1;
            l_strCoordinate = StrConcat2(l_arr_strCoordinateLetter.ElementAt( l_intCountRows -1), l_intCountColumns);
            l_arr_strCoordinates.AddAsLast(l_strCoordinate);
          }
        }
      }
    }
    l_blnPositionFound = APPSLIB::ArrayLookup(l_arr_strCoordinates, o_arrIndex1SeqPositions.ElementAt( 1 -1), l_intReturnFromArray);
    if (l_blnPositionFound == ASWGLOBAL::BOOL::TRUE)
    {
      o_strIndexLabwareFormat = Translate("plate");
    }
    else
    {
      o_strIndexLabwareFormat = Translate("tube");
    }
    o_intNumberOfSamples=io_arrSampleID.GetSize();
    l_intSizeArrIndex1Positions=o_arrIndex1SeqPositions.GetSize();
    l_intSizeArrIndex2Positions=o_arrIndex2SeqPositions.GetSize();
    if (l_intSizeArrIndex2Positions != 0)
    {
      o_intIndexesUsedSetting = 2;
    }
    else
    {
      if (l_intSizeArrIndex1Positions == 0)
      {
        o_intIndexesUsedSetting = 0;
      }
      else
      {
        o_intIndexesUsedSetting = 1;
      }
    }
    if( 0 != l_hdlFileInputWorkList.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlFileInputWorkList.RemoveFields();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: DATA_ReadSamplePlateFile <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function Pip_CheckForSufficientVolumeIn50mlTroughs( device & ML_STAR, variable & i_arr_strReagentNames[], variable & i_arr_fltReagentVolumes[], sequence & i_arr_seqAspirateReagents[], variable & o_bln_RefillContainers ) void {
    private variable l_fltVolumeDetected;
    private variable l_int_NumberOfResidualContainers;
    private variable l_fltVolumeDetectedCurrentChannel;
    private variable l_int_NumberOfContainers;
    private variable loopCounter7;
    private variable loopCounter8;
    private variable l_temp_strChannelPattern;
    private variable loopCounter9;
    private variable l_flt_randomValue;
    private variable l_fltVolumeRequested;
    private variable l_intNumberOfLowVolumeRecords;
    private variable loopCounter10;
    private variable l_strTempChannelPattern_MeasureContainerVolume;
    private variable l_int_NumberOfContainersPerSequence;
    private variable l_int_NumberOfDeactivatedChannel;
    private variable l_flt_ExtraVolumeNeeded;
    private variable l_str_LowVolumeReagentDetected;
    private variable l_int_ContainerCounter;
    private variable l_int_ChannelNumber;
    private variable l_int_ResidualNumberOfChannels;
    private variable t_blnSimulationModeON;
    private variable l_int_NumberOfSequences;
    private variable l_int_NumberOfFullChannelPatterns;
    private variable l_intReturnDisplayDialog;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable l_str_ReagentName;
    private variable l_int_NumberOfChannels;
    private variable l_fltMeasuredVolume_CurrentChannel;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable l_int_TroughNumber;
    private variable loopCounter6;
    private sequence l_seq_DetectVolume;
    private variable l_arr_fltMeasuredVolumesByChannel_ul[];
    private variable l_arr_intTroughNumber[];
    private variable l_arr_intNumberOfActiveChannelsByChannelPattern[];
    private variable l_arr_DialogCol1[];
    private variable l_arr_DialogCol2[];
    private variable l_ar_strColumnHeadersDialog[];
    private variable l_arr_strLowVolumesMeasured_ml[];
    private variable l_arr_DialogCol3[];
    private variable l_arr_strReagentNames[];
    private variable l_temp_arr_LabwareIds[];
    private variable l_arr_strReagentVolumes[];
    private variable l_arr_LabwareIds[];
    private variable l_arr_strChannelPattern[];
    private variable l_strFullpathLoadingPicture;
    o_bln_RefillContainers = 0;
    VectorCustomDialogs::Initialize();
    o_bln_RefillContainers = ASWGLOBAL::BOOL::FALSE;
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
    l_int_NumberOfChannels = 8;
    l_int_NumberOfSequences=i_arr_seqAspirateReagents.GetSize();
    l_arr_LabwareIds.SetSize(0);
    l_arr_strReagentNames.SetSize(0);
    l_arr_strReagentVolumes.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfSequences;)
      {
        loopCounter1 = loopCounter1 + 1;
        SeqGetLabwareIds(i_arr_seqAspirateReagents.ElementAt( loopCounter1 -1), l_temp_arr_LabwareIds);
        l_int_NumberOfContainersPerSequence=l_temp_arr_LabwareIds.GetSize();
        {
          for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfContainersPerSequence;)
          {
            loopCounter2 = loopCounter2 + 1;
            l_arr_strReagentNames.AddAsLast(i_arr_strReagentNames.ElementAt( loopCounter2 -1));
            l_arr_strReagentVolumes.AddAsLast(i_arr_fltReagentVolumes.ElementAt( loopCounter2 -1));
            l_arr_LabwareIds.AddAsLast(l_temp_arr_LabwareIds.ElementAt( loopCounter2 -1));
          }
        }
        l_temp_arr_LabwareIds.SetSize(0);
      }
    }
    SeqCopySequence(l_seq_DetectVolume, ML_STAR.RGT50);
    SeqRemoveAll(l_seq_DetectVolume);
    l_int_NumberOfContainers=l_arr_strReagentNames.GetSize();
    l_arr_strChannelPattern.SetSize(0);
    l_arr_intNumberOfActiveChannelsByChannelPattern.SetSize(0);
    l_int_NumberOfFullChannelPatterns = l_int_NumberOfContainers / l_int_NumberOfChannels;
    l_int_NumberOfResidualContainers = l_int_NumberOfContainers % l_int_NumberOfChannels;
    l_int_ContainerCounter = 0;
    l_temp_strChannelPattern = Translate("");
    if (l_int_NumberOfContainers <= l_int_NumberOfChannels)
    {
      {
        for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfContainers;)
        {
          loopCounter3 = loopCounter3 + 1;
          l_int_ContainerCounter = l_int_ContainerCounter + 1;
          l_temp_strChannelPattern = l_temp_strChannelPattern + Translate("1");
          SeqAdd(l_seq_DetectVolume, l_arr_LabwareIds.ElementAt( l_int_ContainerCounter -1), Translate("3"));
        }
      }
      l_arr_intNumberOfActiveChannelsByChannelPattern.AddAsLast(l_int_ContainerCounter);
      l_int_ResidualNumberOfChannels = l_int_NumberOfChannels - l_int_NumberOfContainers;
      {
        for(loopCounter3 = 0; loopCounter3 < l_int_ResidualNumberOfChannels;)
        {
          loopCounter3 = loopCounter3 + 1;
          l_temp_strChannelPattern = l_temp_strChannelPattern + Translate("0");
        }
      }
      l_arr_strChannelPattern.AddAsLast(l_temp_strChannelPattern);
    }
    else
    {
      {
        for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfFullChannelPatterns;)
        {
          loopCounter3 = loopCounter3 + 1;
          l_temp_strChannelPattern = Translate("");
          {
            for(loopCounter4 = 0; loopCounter4 < l_int_NumberOfChannels;)
            {
              loopCounter4 = loopCounter4 + 1;
              l_int_ContainerCounter = l_int_ContainerCounter + 1;
              l_temp_strChannelPattern = l_temp_strChannelPattern + Translate("1");
              SeqAdd(l_seq_DetectVolume, l_arr_LabwareIds.ElementAt( l_int_ContainerCounter -1), Translate("3"));
            }
          }
          l_arr_intNumberOfActiveChannelsByChannelPattern.AddAsLast(l_int_ContainerCounter);
          l_arr_strChannelPattern.AddAsLast(l_temp_strChannelPattern);
        }
      }
      if (l_int_NumberOfResidualContainers != 0)
      {
        l_temp_strChannelPattern = Translate("");
        l_int_ContainerCounter = 0;
        {
          for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfResidualContainers;)
          {
            loopCounter3 = loopCounter3 + 1;
            l_temp_strChannelPattern = l_temp_strChannelPattern + Translate("1");
            l_int_ContainerCounter = l_int_ContainerCounter + 1;
            SeqAdd(l_seq_DetectVolume, l_arr_LabwareIds.ElementAt( l_int_ContainerCounter -1), Translate("3"));
          }
        }
        l_arr_intNumberOfActiveChannelsByChannelPattern.AddAsLast(l_int_ContainerCounter);
        l_int_NumberOfDeactivatedChannel = l_int_NumberOfChannels - l_int_NumberOfResidualContainers;
        {
          for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfDeactivatedChannel;)
          {
            loopCounter3 = loopCounter3 + 1;
            l_temp_strChannelPattern = l_temp_strChannelPattern + Translate("0");
          }
        }
        l_arr_strChannelPattern.AddAsLast(l_temp_strChannelPattern);
      }
    }
    l_seq_DetectVolume.SetCurrentPosition(1);
    Util2::Debug::TraceSequence(l_seq_DetectVolume);
    Util2::Debug::TraceArray(Translate("l_arr_strChannelPattern: "), l_arr_strChannelPattern);
    Util2::Debug::TraceArray(Translate("l_arr_intNumberOfActiveChannelsByChannelPattern: "), l_arr_intNumberOfActiveChannelsByChannelPattern);
    Util2::Debug::TraceArray_2(Translate("Reagent Name and Volume"), i_arr_strReagentNames, i_arr_fltReagentVolumes);
    l_arr_fltMeasuredVolumesByChannel_ul.SetSize(0);
    l_arr_intTroughNumber.SetSize(0);
    {
      loopCounter6 = 0;
      while (
         (l_seq_DetectVolume.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, l_seq_DetectVolume, 1);
        loopCounter6 = loopCounter6 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        {
          for(loopCounter7 = 0; loopCounter7 < l_arr_intNumberOfActiveChannelsByChannelPattern.ElementAt( loopCounter6 -1);)
          {
            loopCounter7 = loopCounter7 + 1;
            l_strTempChannelPattern_MeasureContainerVolume = Translate("");
            {
              for(loopCounter8 = 0; loopCounter8 < l_int_NumberOfChannels;)
              {
                loopCounter8 = loopCounter8 + 1;
                if (loopCounter8 == loopCounter7)
                {
                  l_int_ChannelNumber = loopCounter8;
                  l_strTempChannelPattern_MeasureContainerVolume = l_strTempChannelPattern_MeasureContainerVolume + Translate("1");
                }
                else
                {
                  l_strTempChannelPattern_MeasureContainerVolume = l_strTempChannelPattern_MeasureContainerVolume + Translate("0");
                }
              }
            }
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Now detecting volume for channel: "), l_strTempChannelPattern_MeasureContainerVolume);
            if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
            {
              l_flt_randomValue = 50000;
              {
                loopCounter9 = 0;
                while (l_flt_randomValue > 40000)
                {
                  loopCounter9 = loopCounter9 + 1;
                  l_flt_randomValue = MthR01Draw();
                  l_flt_randomValue = l_flt_randomValue * 100000;
                }
              }
              l_flt_randomValue = MthFloor(l_flt_randomValue);
              l_fltVolumeDetectedCurrentChannel = l_flt_randomValue;
            }
            else
            {
              l_fltMeasuredVolume_CurrentChannel = HSLML_STAR::MeasureContainerVolume2(ML_STAR, l_seq_DetectVolume, 0, l_strTempChannelPattern_MeasureContainerVolume, 0, 0, 0);
              l_fltVolumeDetectedCurrentChannel = HSLML_STAR::GetContainerVolume(l_int_ChannelNumber);
              l_fltVolumeDetectedCurrentChannel = l_fltVolumeDetectedCurrentChannel * 1000;
            }
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Volume detected: "), l_fltVolumeDetectedCurrentChannel);
            l_arr_intTroughNumber.AddAsLast(l_int_ChannelNumber);
            l_arr_fltMeasuredVolumesByChannel_ul.AddAsLast(l_fltVolumeDetectedCurrentChannel);
          }
        }
        if (
           (l_seq_DetectVolume.GetCurrentPosition() > 0 && l_seq_DetectVolume.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
      l_seq_DetectVolume.SetMax(l_seq_DetectVolume.GetTotal());
      l_seq_DetectVolume.SetCurrentPosition(1);
    }
    Util2::Debug::TraceArray(Translate(" l_arr_fltMeasuredVolumesByChannel_ul: "), l_arr_fltMeasuredVolumesByChannel_ul);
    l_arr_strLowVolumesMeasured_ml.SetSize(0);
    {
      for(loopCounter10 = 0; loopCounter10 < l_int_NumberOfContainers;)
      {
        loopCounter10 = loopCounter10 + 1;
        l_str_ReagentName=i_arr_strReagentNames.GetAt(loopCounter10-1);
        l_int_TroughNumber=l_arr_intTroughNumber.GetAt(loopCounter10-1);
        l_fltVolumeRequested=i_arr_fltReagentVolumes.GetAt(loopCounter10-1);
        l_fltVolumeDetected=l_arr_fltMeasuredVolumesByChannel_ul.GetAt(loopCounter10-1);
        if (l_fltVolumeDetected < l_fltVolumeRequested)
        {
          l_flt_ExtraVolumeNeeded = l_fltVolumeRequested - l_fltVolumeDetected;
          l_flt_ExtraVolumeNeeded = l_flt_ExtraVolumeNeeded / (1000 * 1.0);
          l_flt_ExtraVolumeNeeded = MthCeiling(l_flt_ExtraVolumeNeeded);
          l_str_LowVolumeReagentDetected = StrConcat12(Translate("Reagent: "), l_str_ReagentName, Translate(" in container: "), l_int_TroughNumber, Translate(" requires extra: "), l_flt_ExtraVolumeNeeded, Translate(" mL"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          l_arr_strLowVolumesMeasured_ml.AddAsLast(l_str_LowVolumeReagentDetected);
          l_arr_DialogCol2.AddAsLast(Translate(""));
          l_arr_DialogCol3.AddAsLast(Translate(""));
        }
      }
    }
    l_arr_DialogCol1=l_arr_strLowVolumesMeasured_ml;
    l_intNumberOfLowVolumeRecords=l_arr_strLowVolumesMeasured_ml.GetSize();
    if (l_intNumberOfLowVolumeRecords > 0)
    {
      l_ar_strColumnHeadersDialog.SetSize(0);
      l_ar_strColumnHeadersDialog.AddAsLast(Translate(""));
      l_ar_strColumnHeadersDialog.AddAsLast(Translate(""));
      l_ar_strColumnHeadersDialog.AddAsLast(Translate(""));
      VectorCustomDialogs::LoadingDialogSetResources(l_ar_strColumnHeadersDialog);
      if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
      {
        l_strFullpathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\ReagentContainerCarrier1and2.jpg");
      }
      else
      {
        l_strFullpathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\ReagentContainerCarrier1and2.jpg");
      }
      l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialog(Translate(""), VectorCustomDialogs::ButtonType::YesNoCancel, 0, 0, 0, Translate("Attention! Do you want to refill and reload containers?"), Translate("Click Yes to refill and reload, No to continue without change, Cancel to Abort"), l_strFullpathLoadingPicture, Translate(""), 0, l_arr_DialogCol1, l_arr_DialogCol2, l_arr_DialogCol3);
      if (l_intReturnDisplayDialog == 2)
      {
        abort;
      }
      else
      {
        if (l_intReturnDisplayDialog == 6)
        {
          o_bln_RefillContainers = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          o_bln_RefillContainers = ASWGLOBAL::BOOL::FALSE;
        }
      }
    }
  }

  private function _PrintToFile( variable & i_arr_strCol1[], variable & i_arr_strCol2[], variable & i_arr_strCol3[] ) void {
    private variable l_intNumberOfRecords;
    private variable loopCounter1;
    private variable file1_Reagent_Name;
    private variable file1_Volume_Required;
    private variable file1_Description;
    private file file1;
    private variable l_strMasterMixSummary;
    l_intNumberOfRecords=i_arr_strCol1.GetSize();
    l_strMasterMixSummary = StrConcat4(t_strDirectoryName, Translate("\MastermixSummary"), Translate(".csv"), Translate(""));
    file1.AddField("Reagent Name", file1_Reagent_Name, hslString, 255);
    file1.AddField("Volume Required", file1_Volume_Required, hslString, 255);
    file1.AddField("Description", file1_Description, hslString, 255);
    file1.SetDelimiter(";");
    if( 0 == file1.Open(l_strMasterMixSummary, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, l_strMasterMixSummary, "HxMetEdCompCmd");
    }
    {
      for(loopCounter1 = 0; loopCounter1 < l_intNumberOfRecords;)
      {
        loopCounter1 = loopCounter1 + 1;
        file1_Reagent_Name=i_arr_strCol1.GetAt(loopCounter1-1);
        file1_Volume_Required=i_arr_strCol2.GetAt(loopCounter1-1);
        file1_Description=i_arr_strCol3.GetAt(loopCounter1-1);
        if( 0 == file1.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    onerror goto errLabel_3 ;
    err.Clear();
    if(0){
      if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
      {
        HSLLEPrinting::PrintExcelFileToPDF(Translate("C:\\NGSStarInputFiles\\NEB\\NEBNextUltraIIdirectionalRNA_PolyA\\MastermixSummary.csv"), Translate("C:\\NGSStarInputFiles\\NEB\\NEBNextUltraIIdirectionalRNA_PolyA\\MastermixSummary.pdf"), ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
      }
      else
      {
        HSLLEPrinting::PrintExcelFileToPDF(Translate("C:\\ClinicalNGSStarletInputFiles\\NEB\\NEBNextUltraIIdirectionalRNA_PolyA\\MastermixSummary.csv"), Translate("C:\\ClinicalNGSStarletInputFiles\\NEB\\NEBNextUltraIIdirectionalRNA_PolyA\\MastermixSummary.pdf"), ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
      }
    }
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
  }

  private function _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport( variable i_strStepReturnValueLoadingStep ) void {
    private variable l_strCurrentLabIDTarget;
    private variable l_intNumberOfPositions;
    private variable l_strTranslatedPipettingInformationDispense;
    private variable l_strTranslatedPipettingInformationAspiration;
    private variable l_strCurrentPosIDTarget;
    private variable l_strEmptyString;
    private variable l_intGetErrorRecovery;
    private variable l_strCurrentTime;
    private variable l_strCurrentDate;
    private variable l_strCurrentLabIDSource;
    private variable l_intIndexNumberOfPositions;
    private variable l_intGetSlaveErrorCode;
    private variable l_strTranslatedLoadingInformation;
    private variable l_intGetPositionFromNum;
    private variable l_strGetStepData;
    private variable l_intGetMainErrorCode;
    private variable l_strCurrentPosIDSource;
    private file l_hdlNGSStarReportFile2;
    if(0){
      Trace ("StepReturnValue Loading step to be analyzed :  ", i_strStepReturnValueLoadingStep);
    }
    l_strCurrentDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    l_strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    if(0){
      Trace ("Update Current Date                :  ", l_strCurrentDate);
      Trace ("Update Current Time                :  ", l_strCurrentTime);
    }
    l_intNumberOfPositions = StepReturn::GetNumberOfPositions(i_strStepReturnValueLoadingStep);
    l_strEmptyString = Translate("");
    l_hdlNGSStarReportFile2.AddField("Date", l_strCurrentDate, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Time", l_strCurrentTime, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Source", l_strCurrentLabIDSource, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Source", l_strCurrentPosIDSource, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transfer Volume", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Target", l_strCurrentLabIDTarget, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Target", l_strCurrentPosIDTarget, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Barcode", l_strGetStepData, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transport information", l_strTranslatedLoadingInformation, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Aspiration information", l_strTranslatedPipettingInformationAspiration, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Dispense information", l_strTranslatedPipettingInformationDispense, hslString, 255);
    if( 0 == l_hdlNGSStarReportFile2.Open(t_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
    }
    {
      for(l_intIndexNumberOfPositions = 0; l_intIndexNumberOfPositions < l_intNumberOfPositions;)
      {
        l_intIndexNumberOfPositions = l_intIndexNumberOfPositions + 1;
        l_intGetPositionFromNum = StepReturn::GetPositionFromNum(l_intIndexNumberOfPositions, i_strStepReturnValueLoadingStep);
        l_strCurrentLabIDSource = StepReturn::GetLabwareId(l_intGetPositionFromNum, i_strStepReturnValueLoadingStep);
        l_strCurrentPosIDSource = StepReturn::GetPositionId(l_intGetPositionFromNum, i_strStepReturnValueLoadingStep);
        l_strGetStepData = StepReturn::GetStepData(l_intIndexNumberOfPositions, i_strStepReturnValueLoadingStep);
        if (l_strGetStepData != "")
        {
          l_intGetMainErrorCode = StepReturn::GetMainError(l_intIndexNumberOfPositions, i_strStepReturnValueLoadingStep);
          l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intIndexNumberOfPositions, i_strStepReturnValueLoadingStep);
          l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intIndexNumberOfPositions, i_strStepReturnValueLoadingStep);
          _DATA_TranslateAutoLoadErrorCodes(l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedLoadingInformation);
          if(0){
            Trace ("Update Current LabID Source        :  ", l_strCurrentLabIDSource);
            Trace ("Update Current PosID Source        :  ", l_strCurrentPosIDSource);
          }
          if( 0 == l_hdlNGSStarReportFile2.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
    }
    if( 0 != l_hdlNGSStarReportFile2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlNGSStarReportFile2.RemoveFields();
  }

  private function _DATA_TranslateAutoLoadErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedAutoLoadInformaton ) void {
    private variable l_strMainError;
    private variable l_intErrorValue;
    private variable l_strErrorRecovery;
    private variable l_strSlaveError;
    o_strTranslatedAutoLoadInformaton = 0;
    Trace ("Main error : ", i_intMainError, " +++ Slave error : ", i_intSlaveError, " +++ Recovery button : ", i_intErrorRecovery);
    l_intErrorValue = 0;
    l_strMainError = Translate("unknown error");
    l_strSlaveError = Translate("unknown error");
    l_strErrorRecovery = Translate("unknown error");
    if (i_intMainError == 0)
    {
      l_strMainError = Translate("No main error.");
    }
    if (i_intMainError == 1)
    {
      l_strMainError = Translate("Syntax error.");
    }
    if (i_intMainError == 2)
    {
      l_strMainError = Translate("Hardware error. Drive blocked, low power etc.");
    }
    if (i_intMainError == 3)
    {
      l_strMainError = Translate("Not Executed Error. There was an error in previous part command.");
    }
    if (i_intMainError == 4)
    {
      l_strMainError = Translate("Clot Error. Tip blocked.");
    }
    if (i_intMainError == 5)
    {
      l_strMainError = Translate("Barcode unreadable. Bad or missing barcode.");
    }
    if (i_intMainError == 6)
    {
      l_strMainError = Translate("Insufficient Liquid Error. Not enough liquid available.");
    }
    if (i_intMainError == 7)
    {
      l_strMainError = Translate("Tip already fitted. Repeated attempts to fit a tip or iSwap movement with tips.");
    }
    if (i_intMainError == 8)
    {
      l_strMainError = Translate("No Tip. Command was started without fitting tip. Tip was not fitted or fell off again.");
    }
    if (i_intMainError == 9)
    {
      l_strMainError = Translate("No Carrier. Load command without carrier performed.");
    }
    if (i_intMainError == 10)
    {
      l_strMainError = Translate("Not completed. Command in command buffer was aborted due to an error in a previous command, or command stack was deleted.");
    }
    if (i_intMainError == 11)
    {
      l_strMainError = Translate("Pressure LLD Error. A dispense with pressure liquid level detection is not allowed.");
    }
    if (i_intMainError == 12)
    {
      l_strMainError = Translate("No teach signal. X-Movement to LLD reached maximum allowable position without detecting teach signal.");
    }
    if (i_intMainError == 13)
    {
      l_strMainError = Translate("Loading tray error. Position already occupied.");
    }
    if (i_intMainError == 14)
    {
      l_strMainError = Translate("Pressure LLD Error. Pressure liquid level detection in a consecutive aspiration is not allowed.");
    }
    if (i_intMainError == 15)
    {
      l_strMainError = Translate("Not allowed parameter combination. I.e. pLLD and dispense or wrong X-drive assignment.");
    }
    if (i_intMainError == 16)
    {
      l_strMainError = Translate("Cover close error. Cover is not closed and couldn't be locked.");
    }
    if (i_intMainError == 17)
    {
      l_strMainError = Translate("Improper Aspiration or Dispense Error. The pressure-based aspiration / dispensation control reported an error ( not enough liquid ).");
    }
    if (i_intMainError == 18)
    {
      l_strMainError = Translate("Wash fluid or waste error. Missing wash fluid OR waste of particular washer is full.");
    }
    if (i_intMainError == 19)
    {
      l_strMainError = Translate("Incubation error. Incubator temperature out of limit.");
    }
    if (i_intMainError == 20)
    {
      l_strMainError = Translate("TADM overshot. Overshot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 21)
    {
      l_strMainError = Translate("No element. Expected element not detected.");
    }
    if (i_intMainError == 22)
    {
      l_strMainError = Translate("Element still holding. Get command is sent twice or element is not discarded.");
    }
    if (i_intMainError == 23)
    {
      l_strMainError = Translate("Element lost. Expected element is missing or lost.");
    }
    if (i_intMainError == 24)
    {
      l_strMainError = Translate("Illegal target plate position. Over or underflow of iSWAP positions OR iSWAP is not in park position during pipetting activities.");
    }
    if (i_intMainError == 25)
    {
      l_strMainError = Translate("Illegal user access. Carrier was manually removed or cover is open (immediate stop is executed).");
    }
    if (i_intMainError == 26)
    {
      l_strMainError = Translate("TADM undershot. Undershot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 27)
    {
      l_strMainError = Translate("Position Error. The position is out of range.");
    }
    if (i_intMainError == 28)
    {
      l_strMainError = Translate("Unexpected cLLD Error. The cLLD detected a liquid level above start height of liquid level search.");
    }
    if (i_intMainError == 29)
    {
      l_strMainError = Translate("Area already occupied. Its impossible to occupy area because this area is already in use.");
    }
    if (i_intMainError == 30)
    {
      l_strMainError = Translate("Impossible to occupy area. Area can't be occupied because is no solution for arm prepositioning.");
    }
    if (i_intMainError == 31)
    {
      l_strMainError = Translate("Anti drop control error. Anti drop controlling out of tolerance.");
    }
    if (i_intMainError == 32)
    {
      l_strMainError = Translate("Parameter out of range.");
    }
    if (i_intMainError == 33)
    {
      l_strMainError = Translate("Parameter does not belong to command, or not all parameters were sent.");
    }
    if (i_intMainError == 34)
    {
      l_strMainError = Translate("Node name unknown.");
    }
    if (i_intMainError == 35)
    {
      l_strMainError = Translate("ID parameter error.");
    }
    if (i_intMainError == 37)
    {
      l_strMainError = Translate("Node name defined twice.");
    }
    if (i_intMainError == 38)
    {
      l_strMainError = Translate("Faulty XL channel settings.");
    }
    if (i_intMainError == 39)
    {
      l_strMainError = Translate("Faulty robotic channel settings.");
    }
    if (i_intMainError == 40)
    {
      l_strMainError = Translate("PIP task busy.");
    }
    if (i_intMainError == 41)
    {
      l_strMainError = Translate("Auto load task busy.");
    }
    if (i_intMainError == 42)
    {
      l_strMainError = Translate("Miscellaneous task busy.");
    }
    if (i_intMainError == 43)
    {
      l_strMainError = Translate("Incubator task busy.");
    }
    if (i_intMainError == 44)
    {
      l_strMainError = Translate("Washer task busy.");
    }
    if (i_intMainError == 45)
    {
      l_strMainError = Translate("iSWAP task busy.");
    }
    if (i_intMainError == 46)
    {
      l_strMainError = Translate("CoRe 96 head task busy.");
    }
    if (i_intMainError == 47)
    {
      l_strMainError = Translate("Carrier sensor doesn't work properly.");
    }
    if (i_intMainError == 48)
    {
      l_strMainError = Translate("CoRe 384 head task busy.");
    }
    if (i_intMainError == 49)
    {
      l_strMainError = Translate("Nano pipettor task busy.");
    }
    if (i_intMainError == 50)
    {
      l_strMainError = Translate("XL channel task busy.");
    }
    if (i_intMainError == 51)
    {
      l_strMainError = Translate("Tube gripper task busy.");
    }
    if (i_intMainError == 52)
    {
      l_strMainError = Translate("Imaging channel task busy.");
    }
    if (i_intMainError == 53)
    {
      l_strMainError = Translate("Robotic channel task busy.");
    }
    if (i_intMainError == 99)
    {
      l_strMainError = Translate("Slave Error. This error code indicates an error in one of the slaves.");
    }
    if (i_intMainError == 102)
    {
      l_strMainError = Translate("Liquid Level Error. Liquid surface not detected.");
    }
    if (i_intMainError == 104)
    {
      l_strMainError = Translate("Not Aspirated Error. Dispense volume exceeds the aspirated volume.");
    }
    if (i_intMainError == 105)
    {
      l_strMainError = Translate("Improper Dispensation Error. The dispensed volume is out of tolerance (may only occur for Nano Pipettor Dispense steps).");
    }
    if (i_intSlaveError == 0)
    {
      l_strSlaveError = Translate("No slave error.");
    }
    if (i_intSlaveError == 20)
    {
      l_strSlaveError = Translate("No I²C Bus or EEPROM not working. Transfer check error. No communication to EEPROM.");
    }
    if (i_intSlaveError == 30)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined command.");
    }
    if (i_intSlaveError == 31)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined parameter.");
    }
    if (i_intSlaveError == 32)
    {
      l_strSlaveError = Translate("Syntax check error. Parameter out of range.");
    }
    if (i_intSlaveError == 35)
    {
      l_strSlaveError = Translate("General error during execution of commands. Voltages outside permitted range.");
    }
    if (i_intSlaveError == 36)
    {
      l_strSlaveError = Translate("General error during execution of commands. Stop during execution of a command.");
    }
    if (i_intSlaveError == 40)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process.");
    }
    if (i_intSlaveError == 50)
    {
      l_strSlaveError = Translate("Scanner X drive - Init position not found.");
    }
    if (i_intSlaveError == 51)
    {
      l_strSlaveError = Translate("Scanner X drive - Stepper motor not initialized. Command sent before motor initialized.");
    }
    if (i_intSlaveError == 52)
    {
      l_strSlaveError = Translate("Scanner X drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 55)
    {
      l_strSlaveError = Translate("Scanner rotation drive - drive blocked.");
    }
    if (i_intSlaveError == 60)
    {
      l_strSlaveError = Translate("Carrier Y drive - Init position not found. Hardware not working.");
    }
    if (i_intSlaveError == 61)
    {
      l_strSlaveError = Translate("Carrier Y drive - drive not initialized.");
    }
    if (i_intSlaveError == 62)
    {
      l_strSlaveError = Translate("Carrier Y drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 65)
    {
      l_strSlaveError = Translate("Carrier Z drive - Init position not found. Hardware not working.");
    }
    if (i_intSlaveError == 66)
    {
      l_strSlaveError = Translate("Carrier Z drive - drive not initialized.");
    }
    if (i_intSlaveError == 67)
    {
      l_strSlaveError = Translate("Carrier Z drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 70)
    {
      l_strSlaveError = Translate("Barcode scanner - Communication error. Hardware not working, scanner dysfunction.");
    }
    if (i_intSlaveError == 75)
    {
      l_strSlaveError = Translate("Loading indicator LED - Communication error to loading indicator. Communication to LEDs not working.");
    }
    if (i_intSlaveError == 80)
    {
      l_strSlaveError = Translate("Carrier handling - Identification barcode not readable. Missing or unreadable identification barcode or wrong barcode type definition.");
    }
    if (i_intSlaveError == 81)
    {
      l_strSlaveError = Translate("Carrier handling - No carrier present. Carrier missing or sensor not working.");
    }
    if (i_intSlaveError == 82)
    {
      l_strSlaveError = Translate("Carrier handling - No carrier loaded. Load or unload command without identification of carrier.");
    }
    if (i_intSlaveError == 83)
    {
      l_strSlaveError = Translate("Carrier handling - Loading tray is occupied. At unloading carrier detected on loading tray.");
    }
    if (i_intSlaveError == 84)
    {
      l_strSlaveError = Translate("Carrier handling - Data for free definable carrier not correct. Indices not in ascending order OR positions not in ascending order OR gab between barcode reading area to low.");
    }
    if (i_intErrorRecovery == 0)
    {
      l_strErrorRecovery = Translate("No recovery.");
    }
    if (i_intErrorRecovery == 1)
    {
      l_strErrorRecovery = Translate("Abort - Run aborted.");
    }
    if (i_intErrorRecovery == 2)
    {
      l_strErrorRecovery = Translate("Cancel - run canceled or user defined errorhandling  was executed.");
    }
    if (i_intErrorRecovery == 3)
    {
      l_strErrorRecovery = Translate("Initialize. Instrument initialized again.");
    }
    if (i_intErrorRecovery == 4)
    {
      l_strErrorRecovery = Translate("Repeat. Command repeated.");
    }
    if (i_intErrorRecovery == 5)
    {
      l_strErrorRecovery = Translate("Exclude. Channel or position excluded until next tip pick up.");
    }
    if (i_intErrorRecovery == 6)
    {
      l_strErrorRecovery = Translate("Waste. Tip ejected to the default waste.");
    }
    if (i_intErrorRecovery == 7)
    {
      l_strErrorRecovery = Translate("Air. Rest of missing volume filled up with air.");
    }
    if (i_intErrorRecovery == 8)
    {
      l_strErrorRecovery = Translate("Bottom. Aspiration repeated on container bottom.");
    }
    if (i_intErrorRecovery == 9)
    {
      l_strErrorRecovery = Translate("Continue. Run continued without any change.");
    }
    if (i_intErrorRecovery == 10)
    {
      l_strErrorRecovery = Translate("Barcode. Barcode assigned manually.");
    }
    if (i_intErrorRecovery == 11)
    {
      l_strErrorRecovery = Translate("Next. Command repeated on next sequence position.");
    }
    if (i_intErrorRecovery == 12)
    {
      l_strErrorRecovery = Translate("Available. Available volume used.");
    }
    if (l_strMainError == "unknown error")
    {
      l_strMainError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strSlaveError == "unknown error")
    {
      l_strSlaveError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strErrorRecovery == "unknown error")
    {
      l_strErrorRecovery = Translate(" error not translated by library - check log file to retrieve data");
    }
    l_strMainError = StrConcat4(l_strMainError, Translate(" - code : "), i_intMainError, Translate(""));
    l_strSlaveError = StrConcat4(l_strSlaveError, Translate(" - code : "), i_intSlaveError, Translate(""));
    l_strErrorRecovery = StrConcat4(l_strErrorRecovery, Translate(" - code : "), i_intErrorRecovery, Translate(""));
    l_intErrorValue = l_intErrorValue + i_intMainError;
    l_intErrorValue = l_intErrorValue + i_intSlaveError;
    l_intErrorValue = l_intErrorValue + i_intErrorRecovery;
    if (l_intErrorValue == 0)
    {
      o_strTranslatedAutoLoadInformaton = Translate("loading step ok.");
    }
    else
    {
      o_strTranslatedAutoLoadInformaton = StrConcat8(l_strMainError, Translate(" ; "), l_strSlaveError, Translate(" ; "), l_strErrorRecovery, Translate(""), Translate(""), Translate(""));
    }
  }

  function MultipleChoiceDialog_DefineChoiceElement( variable i_int_DialogId, variable i_str_GroupName, variable i_str_Label, variable i_str_ImageFilePath ) void {
    private file file1;
    private variable l_strFullpathFile;
    g_int_DB_MultipleChoiceDialog_LabelIndex = g_int_DB_MultipleChoiceDialog_LabelIndex + 1;
    Trace("t_blnPlatformNGSSTARused : ",t_blnPlatformNGSSTARused);
    if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
    {
      l_strFullpathFile = StrConcat12(Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\"), g_str_KitProvider, Translate("\\"), g_str_KitName, Translate("\\Library\\NGSStarLoading\\MultipleChoiceDialogSummary.xls"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      if(0){
        l_strFullpathFile = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\NEB\\NEBNext®UltraIIDirectionalRNALibraryPrepKit\\Library\\NGSStarLoading\\MultipleChoiceDialogSummary.xls");
      }
    }
    else
    {
      l_strFullpathFile = StrConcat12(Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\"), g_str_KitProvider, Translate("\\"), g_str_KitName, Translate("\\Library\\NGSStarLoading\\MultipleChoiceDialogSummary.xls"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      if(0){
        l_strFullpathFile = Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\NEB\\NEBNext®UltraIIDirectionalRNALibraryPrepKit\\Library\\NGSStarLoading\\MultipleChoiceDialogSummary.xls");
      }
    }
    Trace("Pfad : ",l_strFullpathFile);
    file1.AddField("DialogID", i_int_DialogId, hslInteger);
    file1.AddField("GroupName", i_str_GroupName, hslString, 255);
    file1.AddField("Label", i_str_Label, hslString, 255);
    file1.AddField("LabelIndex", g_int_DB_MultipleChoiceDialog_LabelIndex, hslInteger);
    if( 0 == file1.Open(l_strFullpathFile + " " + "Sheet1", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, l_strFullpathFile, "HxMetEdCompCmd");
    }
    g_arr_DB_MultipleChoiceDialog_DialogID.AddAsLast(i_int_DialogId);
    g_arr_DB_MultipleChoiceDialog_GroupNames.AddAsLast(i_str_GroupName);
    g_arr_DB_MultipleChoiceDialog_Labels.AddAsLast(i_str_Label);
    g_arr_DB_MultipleChoiceDialog_ImageFilePathsPerLabel.AddAsLast(i_str_ImageFilePath);
    g_arr_DB_MultipleChoiceDialog_ImageHeight.AddAsLast(20);
    g_arr_DB_MultipleChoiceDialog_ImageWidth.AddAsLast(20);
    g_arr_DB_MultipleChoiceDialog_IsEditable.AddAsLast(1);
    g_arr_DB_MultipleChoiceDialog_IsTempSelected.AddAsLast(0);
    g_arr_DB_MultipleChoiceDialog_ToolTips.AddAsLast(Translate(""));
    g_arr_DB_MultipleChoiceDialog_LabelIndex.AddAsLast(g_int_DB_MultipleChoiceDialog_LabelIndex);
    if( 0 == file1.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
  }

  function DATA_HandOverDataToSMT( variable i_strFullPathReportFile, variable i_intARWPlatformUsed, variable i_strKitProvider, variable i_strKitName ) void {
    private variable l_strFullpathFile;
    t_strFullPathReportFile = i_strFullPathReportFile;
    if (i_intARWPlatformUsed == 1)
    {
      t_blnPlatformNGSSTARused = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      t_blnPlatformNGSSTARused = ASWGLOBAL::BOOL::FALSE;
    }
    Trace("i_intARWPlatformUsed : ", i_intARWPlatformUsed, "  t_blnPlatformNGSSTARused : ", t_blnPlatformNGSSTARused);
    g_str_KitProvider = i_strKitProvider;
    g_str_KitName = i_strKitName;
    if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
    {
      l_strFullpathFile = StrConcat12(Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\"), g_str_KitProvider, Translate("\\"), g_str_KitName, Translate("\\Library\\NGSStarLoading\\MultipleChoiceDialogSummary.xls"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    else
    {
      l_strFullpathFile = StrConcat12(Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\"), g_str_KitProvider, Translate("\\"), g_str_KitName, Translate("\\Library\\NGSStarLoading\\MultipleChoiceDialogSummary.xls"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    HSLExtensions::File::Delete(l_strFullpathFile);
  }

  function Load_TipCarrierOnly( device & ML_STAR, variable i_str_CarrierID, variable i_bln_SkipLoadingRoutine ) void {
    private variable l_strStepRetrunValueLoadCarrier;
    private variable l_bln_CarrierLoaded;
    private variable l_int_ReturnSearchIndex;
    l_bln_CarrierLoaded = ASWGLOBAL::BOOL::FALSE;
    l_int_ReturnSearchIndex = ARRAYTOOLS::Lookup(g_arr_CarrierName, i_str_CarrierID);
    Trace("result for searching carrier ID : ",l_int_ReturnSearchIndex);
    if (l_int_ReturnSearchIndex != 0)
    {
      if (g_arr_CarrierLoadingCondition.ElementAt( l_int_ReturnSearchIndex -1) == ASWGLOBAL::BOOL::TRUE)
      {
        if (i_bln_SkipLoadingRoutine != ASWGLOBAL::BOOL::TRUE)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        }
      }
    }
    else
    {
      MECC::TraceComment(Translate("Carrier ID not found withing ARW list (HSL file) --> no loading will be performed!\nHint : If you want to use this command with a new carrier : update first your HSL file..."));
    }
  }

  function Display_Message_Dialog( variable i_str_ErrorMessage ) void {
    private variable l_int_rtnErrorDialog;
    VectorCustomDialogs::Initialize();
    l_int_rtnErrorDialog = VectorCustomDialogs::ErrorDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, i_str_ErrorMessage, Translate("Press OK to proceed the run"));
    VectorCustomDialogs::Terminate();
  }

  function Retrieve_20mlTrough_ReagentsVolumesAndSequences( variable & o_arr_ReagentNames[], variable & o_arr_ReagentTotalVolumes[], sequence & o_arr_ReagentSequences[] ) void {
    o_arr_ReagentNames.SetSize( 0);
    o_arr_ReagentTotalVolumes.SetSize( 0);
    o_arr_ReagentSequences.SetSize( 0);
    ARRAYTOOLS::ArrayVLookUp(g_arr_DB_strReagentNamePerContainer, g_arr_DB_strLabwareTypePerContainer, ARW_Global::LabwareType::RocheTrough20mL, o_arr_ReagentNames);
    ARRAYTOOLS::ArrayVLookUp(g_arr_DB_fltVolumePerContainer, g_arr_DB_strLabwareTypePerContainer, ARW_Global::LabwareType::RocheTrough20mL, o_arr_ReagentTotalVolumes);
    ARRAYTOOLS::ArraySeqVLookUp(g_arr_DB_seqSequenceToAspirateForEachReagent, g_arr_DB_strLabwareTypeForEachReagent, ARW_Global::LabwareType::RocheTrough20mL, o_arr_ReagentSequences);
  }

  function Display_SelectProcesses_Dialog( variable & i_arr_strProcessId[], variable & o_int_StartProcess, variable & o_int_StopProcess, variable & o_arr_blnProcessActivationStatus[] ) void {
    private variable l_intImageWidth_ElementsInDialog;
    private variable l_str_MandatoryStopProcessId;
    private variable l_int_ReturnSearchProcessCombinationsIndex;
    private variable l_int_ProcessCounter;
    private variable l_strWrapOrientation_ElementsInDialog;
    private variable l_str_CurrentProcess;
    private variable l_strImageFilePath_ElementsInDialog;
    private variable l_int_NumberOfMandatoryStopPoints;
    private variable l_intReturnDisplayDialog;
    private variable l_int_TotalNumberOfProcesses;
    private variable l_int_processIsSelected;
    private variable l_int_StartProcess;
    private variable l_str_ProcessCombination;
    private variable loopCounter1;
    private variable l_str_TopText;
    private variable loopCounter2;
    private variable l_int_StopProcess;
    private variable l_intImageHeight_ElementsInDialog;
    private variable loopCounter3;
    private variable l_int_TotalNumberOfProcessPlusStartProcess;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable l_int_ReturnSearchProcessDeactivated;
    private variable l_arrTokens[];
    private variable l_arr_ToolTips[];
    private variable l_arr_MandatoryStopPoints[];
    private variable l_arr_IsSelected[];
    private variable l_arr_GroupName[];
    private variable l_arr_ImageHeight[];
    private variable l_arr_Labels[];
    private variable l_arr_ProcessCombinations[];
    private variable l_arr_ImageWitdth[];
    private variable l_arr_ImageSource[];
    private variable l_arr_DeactivatedStartingPoints[];
    private variable l_arr_IsEditable[];
    o_int_StartProcess = 0;
    o_int_StopProcess = 0;
    o_arr_blnProcessActivationStatus.SetSize( 0);
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
    VectorCustomDialogs::Initialize();
    l_strWrapOrientation_ElementsInDialog = VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical;
    l_intImageHeight_ElementsInDialog = 20;
    l_intImageWidth_ElementsInDialog = 20;
    if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
    {
      l_strImageFilePath_ElementsInDialog = Translate("C:\Program Files (x86)\HAMILTON\NGSStar\KitProvider\KitName\Library\NGSStar_Steps.Select_Processes.bmp");
    }
    else
    {
      l_strImageFilePath_ElementsInDialog = Translate("C:\Program Files (x86)\HAMILTON\ClinicalNGSStarlet\KitProvider\KitName\Library\NGSStar_Steps.Select_Processes.bmp");
    }
    o_arr_blnProcessActivationStatus.SetSize(0);
    l_arr_GroupName.SetSize(0);
    l_arr_Labels.SetSize(0);
    l_arr_ImageHeight.SetSize(0);
    l_arr_ImageSource.SetSize(0);
    l_arr_ImageWitdth.SetSize(0);
    l_arr_IsEditable.SetSize(0);
    l_arr_IsSelected.SetSize(0);
    l_arr_ToolTips.SetSize(0);
    l_int_StartProcess = 0;
    l_int_StopProcess = 0;
    if(0){
      l_int_processIsSelected = 1;
    }
    l_int_ProcessCounter = 0;
    l_arr_DeactivatedStartingPoints.SetSize(0);
    if(0){
      l_arr_DeactivatedStartingPoints.AddAsLast(1);
      l_arr_DeactivatedStartingPoints.AddAsLast(2);
      l_arr_DeactivatedStartingPoints.AddAsLast(3);
      l_arr_DeactivatedStartingPoints.AddAsLast(5);
      l_arr_DeactivatedStartingPoints.AddAsLast(6);
      l_arr_DeactivatedStartingPoints.AddAsLast(7);
      l_arr_DeactivatedStartingPoints.AddAsLast(8);
      l_arr_DeactivatedStartingPoints.AddAsLast(9);
    }
    l_arr_ProcessCombinations.SetSize(0);
    l_arr_ProcessCombinations.AddAsLast(Translate("1.2"));
    l_arr_ProcessCombinations.AddAsLast(Translate("2"));
    l_arr_ProcessCombinations.AddAsLast(Translate("3.4"));
    l_arr_ProcessCombinations.AddAsLast(Translate("4"));
    if(0){
      l_arr_ProcessCombinations.AddAsLast(Translate("5"));
      l_arr_ProcessCombinations.AddAsLast(Translate(""));
      l_arr_ProcessCombinations.AddAsLast(Translate(""));
      l_arr_ProcessCombinations.AddAsLast(Translate(""));
      l_arr_ProcessCombinations.AddAsLast(Translate(""));
      l_arr_ProcessCombinations.AddAsLast(Translate("10.11"));
      l_arr_ProcessCombinations.AddAsLast(Translate("11"));
    }
    l_int_TotalNumberOfProcesses=i_arr_strProcessId.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_TotalNumberOfProcesses;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_arr_GroupName.AddAsLast(Translate("Start Process"));
        l_arr_ImageSource.AddAsLast(l_strImageFilePath_ElementsInDialog);
        l_arr_ImageHeight.AddAsLast(l_intImageHeight_ElementsInDialog);
        l_arr_ImageWitdth.AddAsLast(l_intImageWidth_ElementsInDialog);
        l_int_ReturnSearchProcessDeactivated = ARRAYTOOLS::Lookup(l_arr_DeactivatedStartingPoints, loopCounter1);
        if (l_int_ReturnSearchProcessDeactivated > 0)
        {
          l_arr_IsEditable.AddAsLast(0);
          l_arr_IsSelected.AddAsLast(0);
        }
        else
        {
          l_arr_IsEditable.AddAsLast(1);
          l_arr_IsSelected.AddAsLast(0);
        }
        l_arr_Labels.AddAsLast(i_arr_strProcessId.ElementAt( loopCounter1 -1));
      }
    }
    l_int_NumberOfMandatoryStopPoints=l_arr_MandatoryStopPoints.GetSize();
    l_str_TopText = Translate("Define Workflow ");
    {
      for(loopCounter5 = 0; loopCounter5 < l_int_NumberOfMandatoryStopPoints;)
      {
        loopCounter5 = loopCounter5 + 1;
        l_str_MandatoryStopProcessId=i_arr_strProcessId.GetAt(l_arr_MandatoryStopPoints.ElementAt( loopCounter5 -1)-1);
        if (loopCounter5 == 1)
        {
          l_str_TopText = StrConcat8(l_str_TopText, Translate("(Mandatory Stopping Points: ["), l_str_MandatoryStopProcessId, Translate("] "), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        else
        {
          l_str_TopText = StrConcat8(l_str_TopText, Translate("["), l_str_MandatoryStopProcessId, Translate("] "), Translate(""), Translate(""), Translate(""), Translate(""));
        }
      }
    }
    if(0){
      l_intReturnDisplayDialog = VectorCustomDialogs::ImageRadioButtonDialog(Translate("Test My NGS Protocol"), VectorCustomDialogs::ButtonType::AcceptCancel, 0, 0, l_str_TopText, Translate("Press Accept to confirm, Cancel to abort"), l_arr_Labels, l_arr_ToolTips, l_arr_IsEditable, l_arr_ImageSource, l_arr_ImageHeight, l_arr_ImageWitdth, l_arr_IsSelected, l_arr_GroupName, l_strWrapOrientation_ElementsInDialog, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    }
    l_intReturnDisplayDialog = VectorCustomDialogs::RadioButtonDialog(Translate(""), VectorCustomDialogs::ButtonType::AcceptCancel, 0, 0, Translate("Select start process"), Translate("Press Accept to confirm, Cancel to abort"), l_arr_Labels, l_arr_ToolTips, l_arr_IsEditable, l_arr_IsSelected, l_arr_GroupName, VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    if (l_intReturnDisplayDialog == 2)
    {
      abort;
    }
    {
      for(loopCounter3 = 0; loopCounter3 < l_int_TotalNumberOfProcesses;)
      {
        loopCounter3 = loopCounter3 + 1;
        l_int_ProcessCounter = l_int_ProcessCounter + 1;
        if (l_arr_IsSelected.ElementAt( loopCounter3 -1) == 1)
        {
          l_int_StartProcess = loopCounter3;
        }
      }
    }
    ARRAYTOOLS::Update_Value_in_Array(l_arr_IsSelected, l_int_processIsSelected, l_int_StartProcess);
    l_arr_GroupName.SetSize(0);
    l_arr_Labels.SetSize(0);
    l_arr_ImageHeight.SetSize(0);
    l_arr_ImageSource.SetSize(0);
    l_arr_ImageWitdth.SetSize(0);
    l_arr_IsEditable.SetSize(0);
    l_arr_IsSelected.SetSize(0);
    l_arr_ToolTips.SetSize(0);
    l_arr_GroupName.AddAsLast(Translate("Start Process"));
    l_arr_Labels.AddAsLast(i_arr_strProcessId.ElementAt( l_int_StartProcess -1));
    l_arr_IsEditable.AddAsLast(0);
    l_arr_ImageSource.AddAsLast(l_strImageFilePath_ElementsInDialog);
    l_arr_ImageHeight.AddAsLast(l_intImageHeight_ElementsInDialog);
    l_arr_ImageWitdth.AddAsLast(l_intImageWidth_ElementsInDialog);
    l_arr_IsSelected.AddAsLast(0);
    l_str_ProcessCombination=l_arr_ProcessCombinations.GetAt(l_int_StartProcess-1);
    STRTOKENIZE::StrTokenize(l_str_ProcessCombination, Translate("."), l_arrTokens, ASWGLOBAL::BOOL::FALSE);
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_TotalNumberOfProcesses;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_arr_GroupName.AddAsLast(Translate("Stop Process"));
        if (loopCounter1 < l_int_StartProcess)
        {
          l_arr_IsEditable.AddAsLast(0);
          l_arr_IsSelected.AddAsLast(0);
        }
        else
        {
          if(0){
            l_int_ReturnSearchProcessDeactivated = ARRAYTOOLS::Lookup(l_arr_DeactivatedStartingPoints, loopCounter1);
            if (l_int_ReturnSearchProcessDeactivated > 0)
            {
              l_arr_IsEditable.AddAsLast(0);
              l_arr_IsSelected.AddAsLast(0);
            }
            else
            {
            }
          }
          Util2::Debug::TraceArray(Translate("l_arrTokens:"), l_arrTokens);
          _ConvertValueToString(loopCounter1, l_str_CurrentProcess);
          l_int_ReturnSearchProcessCombinationsIndex = ARRAYTOOLS::Lookup(l_arrTokens, l_str_CurrentProcess);
          if (l_int_ReturnSearchProcessCombinationsIndex <= 0)
          {
            l_arr_IsEditable.AddAsLast(0);
            l_arr_IsSelected.AddAsLast(0);
          }
          else
          {
            l_arr_IsEditable.AddAsLast(1);
            l_arr_IsSelected.AddAsLast(0);
          }
        }
        l_arr_ImageSource.AddAsLast(l_strImageFilePath_ElementsInDialog);
        l_arr_ImageHeight.AddAsLast(l_intImageHeight_ElementsInDialog);
        l_arr_ImageWitdth.AddAsLast(l_intImageWidth_ElementsInDialog);
        l_arr_Labels.AddAsLast(i_arr_strProcessId.ElementAt( loopCounter1 -1));
      }
    }
    if(0){
      l_intReturnDisplayDialog = VectorCustomDialogs::ImageRadioButtonDialog(Translate("Test My NGS Protocol"), VectorCustomDialogs::ButtonType::AcceptCancel, 0, 0, l_str_TopText, Translate("Press Accept to confirm, Cancel to abort"), l_arr_Labels, l_arr_ToolTips, l_arr_IsEditable, l_arr_ImageSource, l_arr_ImageHeight, l_arr_ImageWitdth, l_arr_IsSelected, l_arr_GroupName, l_strWrapOrientation_ElementsInDialog, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    }
    l_intReturnDisplayDialog = VectorCustomDialogs::RadioButtonDialog(Translate(""), VectorCustomDialogs::ButtonType::AcceptCancel, 0, 0, Translate("Select stop process"), Translate("Press Accept to confirm, Cancel to abort"), l_arr_Labels, l_arr_ToolTips, l_arr_IsEditable, l_arr_IsSelected, l_arr_GroupName, VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    if (l_intReturnDisplayDialog == 2)
    {
      abort;
    }
    l_int_ProcessCounter = 0;
    l_int_TotalNumberOfProcessPlusStartProcess = l_int_TotalNumberOfProcesses + 1;
    {
      for(loopCounter4 = 0; loopCounter4 < l_int_TotalNumberOfProcessPlusStartProcess;)
      {
        loopCounter4 = loopCounter4 + 1;
        if (loopCounter4 != 1)
        {
          l_int_ProcessCounter = l_int_ProcessCounter + 1;
          if (l_arr_IsSelected.ElementAt( loopCounter4 -1) == 1)
          {
            l_int_StopProcess = l_int_ProcessCounter;
          }
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("User selected START Process: "), l_int_StartProcess);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("User selected STOP Process: "), l_int_StopProcess);
    o_int_StartProcess = l_int_StartProcess;
    o_int_StopProcess = l_int_StopProcess;
    {
      for(loopCounter2 = 0; loopCounter2 < l_int_TotalNumberOfProcesses;)
      {
        loopCounter2 = loopCounter2 + 1;
        if (loopCounter2 < l_int_StartProcess)
        {
          o_arr_blnProcessActivationStatus.AddAsLast(ASWGLOBAL::BOOL::FALSE);
        }
        else
        {
          if (loopCounter2 > l_int_StopProcess)
          {
            o_arr_blnProcessActivationStatus.AddAsLast(ASWGLOBAL::BOOL::FALSE);
          }
          else
          {
            o_arr_blnProcessActivationStatus.AddAsLast(ASWGLOBAL::BOOL::TRUE);
          }
        }
      }
    }
    g_arr_blnActivationProcessStatus=o_arr_blnProcessActivationStatus;
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("o_arr_blnProcessActivationStatus: "), o_arr_blnProcessActivationStatus);
    VectorCustomDialogs::Terminate();
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
  }

  function Calculate_TotalVolumeAndSequenceToAspirate( device & ML_STAR, variable i_str_ReagentName, variable i_str_ReagentType, variable i_int_NumberOfSamples, variable i_str_LabwareTypeId, variable i_flt_MaximumContainerVolume, variable i_flt_DeadVolumeLabware, variable i_flt_DeadVolumeReagent, sequence & i_seq_Template, variable i_int_StartingPoint, variable i_int_MinimumNumberOfContainers, sequence & o_seqCreated ) void {
    private variable l_int_NumberOfChannelsInstalled;
    private variable l_str_ErrorMessage;
    private variable l_flt_MaximumContainerVolume_Temp;
    private variable l_int_ReturnSearchIndex;
    private variable l_int_NumberOfSamplesPerContainerPlusExtraSample;
    private variable l_flt_TotalVolumePerContainer;
    private variable l_intPosID;
    private variable l_str_CarrierID;
    private variable i_flt_VolumePerSample;
    private variable l_flt_TotalVolumeNeeded;
    private variable l_int_RemainingNumberOfContainers;
    private variable l_int_NumberOfSamplesPerContainer;
    private variable l_flt_VolumePerSampleIncludingDeadVolume;
    private variable i_strStartingPoint;
    private variable l_flt_VolumePerSample;
    private variable l_int_RemainingNumberOfSamples;
    private variable l_int_NumberOfContainersNeeded;
    private variable l_str_SiteID;
    private variable l_strLabId;
    private variable l_str_ReagentNameLabwareType;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable l_int_NumberOfContainersNeeded_Temp;
    private variable l_strLabwareId;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable l_intTotalPositionSeqTemplate;
    private variable l_intPositionCounter;
    private variable l_str_VolumeAndUnits;
    private variable l_MaximumContainerVolumeExcludingDeadVolume;
    private variable l_strPositionId;
    private variable l_intStringFound_2;
    private variable loopCounter5;
    private variable loopCounter6;
    private variable l_int_currentPosition;
    private variable l_int_MaximumNumberSamplesPerContainer;
    private variable l_intStringFound;
    private variable l_flt_TotalVolumeRequired;
    private variable l_int_NumberOfMastermixComponents_ForThisMastermix;
    private sequence l_seq_Template;
    private sequence l_seq_Template_copy;
    private variable l_arr_strLabwareTypePerContainer[];
    private variable l_arr_strReagentTypePerContainer[];
    private variable l_arr_strLabwareTypeForThisReagent[];
    private variable l_arr_MastermixComponentsNames_ForThisMastermix[];
    private variable l_arr_MastermixComponentsVolumes_ForThisMastermix[];
    private variable l_arr_strNameForThisReagent[];
    private variable l_arr_fltVolumePerContainer[];
    private variable l_arr_strPositionsId[];
    private variable l_arr_strReagentNameLabwareTypePerContainer[];
    private variable l_arr_intNumberOfSamplesPerContainer[];
    private variable l_arr_strCarrierId[];
    private variable l_arr_strDescriptionVolumePerContainer[];
    private variable l_arr_fltTotalVolumeForThisReagent[];
    private variable l_arr_strReagentNamePerContainer[];
    { sequence __temp; o_seqCreated = __temp; }
    l_int_NumberOfChannelsInstalled = 8;
    if (i_int_MinimumNumberOfContainers > 0)
    {
      l_int_NumberOfContainersNeeded_Temp = 0;
      l_flt_MaximumContainerVolume_Temp = i_flt_MaximumContainerVolume;
    }
    else
    {
      l_int_NumberOfContainersNeeded_Temp = -1;
      l_int_NumberOfContainersNeeded = 1;
      l_flt_MaximumContainerVolume_Temp = i_flt_MaximumContainerVolume;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_int_NumberOfChannelsInstalled: "), l_int_NumberOfChannelsInstalled);
    l_flt_TotalVolumeRequired = 0.0;
    l_int_ReturnSearchIndex = ARRAYTOOLS::Lookup(g_arr_DefineVolume_LiquidNames, i_str_ReagentName);
    if (l_int_ReturnSearchIndex == 0)
    {
      l_str_ErrorMessage = StrConcat4(Translate("Reagent = "), i_str_ReagentName, Translate(" has not been found in the database. The liquid may correspond to a process that is not activated this run. Otherwise, check the spelling, review the Definition of Volumes"), Translate(""));
      TrcTrace(Translate(">>>>>>>>>>> l_str_ErrorMessage: "), l_str_ErrorMessage);
    }
    else
    {
      {
        loopCounter5 = 0;
        while (l_int_NumberOfContainersNeeded_Temp < i_int_MinimumNumberOfContainers)
        {
          loopCounter5 = loopCounter5 + 1;
          if (loopCounter5 != 1)
          {
            if (i_int_MinimumNumberOfContainers > 0)
            {
              l_flt_MaximumContainerVolume_Temp = l_flt_MaximumContainerVolume_Temp - 10;
            }
          }
          l_flt_VolumePerSample=g_arr_DefineVolume_TotalVolumePerSample.GetAt(l_int_ReturnSearchIndex-1);
          i_flt_VolumePerSample = l_flt_VolumePerSample;
          if (i_flt_VolumePerSample != 0)
          {
            TrcTrace(Translate(" ----------------------- Input Parameters: "), i_str_ReagentName);
            TrcTrace(Translate("-------------- i_flt_DeadVolumeLabware: "), i_flt_DeadVolumeLabware);
            TrcTrace(Translate("-------------- i_flt_DeadVolumeReagent: "), i_flt_DeadVolumeReagent);
            TrcTrace(Translate("-------------- i_flt_MaximumContainerVolume: "), i_flt_MaximumContainerVolume);
            TrcTrace(Translate("-------------- i_flt_VolumePerSample: "), i_flt_VolumePerSample);
            TrcTrace(Translate("-------------- i_int_NumberOfSamples: "), i_int_NumberOfSamples);
            TrcTrace(Translate(" ----------- Calculations -----------"), Translate(""));
            i_flt_DeadVolumeReagent = 1 + i_flt_DeadVolumeReagent;
            l_flt_TotalVolumeNeeded = i_int_NumberOfSamples * i_flt_VolumePerSample;
            l_flt_TotalVolumeNeeded = l_flt_TotalVolumeNeeded * i_flt_DeadVolumeReagent;
            TrcTrace(Translate("-------------- l_flt_TotalVolumeNeeded: "), l_flt_TotalVolumeNeeded);
            l_MaximumContainerVolumeExcludingDeadVolume = i_flt_MaximumContainerVolume - i_flt_DeadVolumeLabware;
            l_int_NumberOfContainersNeeded = l_flt_TotalVolumeNeeded / (l_MaximumContainerVolumeExcludingDeadVolume * 1.0);
            l_int_NumberOfContainersNeeded = MthCeiling(l_int_NumberOfContainersNeeded);
            l_int_NumberOfContainersNeeded = l_flt_TotalVolumeNeeded / (l_MaximumContainerVolumeExcludingDeadVolume * 1.0);
            l_flt_VolumePerSampleIncludingDeadVolume = i_flt_VolumePerSample * i_flt_DeadVolumeReagent;
            l_int_MaximumNumberSamplesPerContainer = l_MaximumContainerVolumeExcludingDeadVolume / (l_flt_VolumePerSampleIncludingDeadVolume * 1.0);
            l_int_MaximumNumberSamplesPerContainer = MthFloor(l_int_MaximumNumberSamplesPerContainer);
            TrcTrace(Translate("-------------- l_int_MaximumNumberSamplesPerContainer: "), l_int_MaximumNumberSamplesPerContainer);
            l_int_NumberOfContainersNeeded = i_int_NumberOfSamples / (l_int_MaximumNumberSamplesPerContainer * 1.0);
            l_int_NumberOfContainersNeeded = MthCeiling(l_int_NumberOfContainersNeeded);
            if (i_int_MinimumNumberOfContainers > l_int_NumberOfContainersNeeded)
            {
              l_int_NumberOfContainersNeeded = i_int_MinimumNumberOfContainers;
            }
            TrcTrace(Translate("-------------- Recalculation = l_int_NumberOfContainersNeeded: "), l_int_NumberOfContainersNeeded);
            l_str_VolumeAndUnits = Translate("");
            l_flt_TotalVolumePerContainer = 0.0;
            l_arr_strReagentNameLabwareTypePerContainer.SetSize(0);
            l_arr_intNumberOfSamplesPerContainer.SetSize(0);
            l_arr_fltTotalVolumeForThisReagent.SetSize(0);
            l_arr_strNameForThisReagent.SetSize(0);
            l_arr_strLabwareTypeForThisReagent.SetSize(0);
            l_arr_strDescriptionVolumePerContainer.SetSize(0);
            l_arr_fltVolumePerContainer.SetSize(0);
            l_arr_strReagentTypePerContainer.SetSize(0);
            l_arr_strReagentNamePerContainer.SetSize(0);
            l_arr_strLabwareTypePerContainer.SetSize(0);
            l_arr_strPositionsId.SetSize(0);
            l_arr_strCarrierId.SetSize(0);
            l_int_NumberOfSamplesPerContainer = i_int_NumberOfSamples / (l_int_NumberOfContainersNeeded * 1.0);
            l_int_NumberOfSamplesPerContainer = MthFloor(l_int_NumberOfSamplesPerContainer);
            l_int_RemainingNumberOfSamples = i_int_NumberOfSamples % l_int_NumberOfContainersNeeded;
            if (l_int_RemainingNumberOfSamples != 0)
            {
              l_int_NumberOfSamplesPerContainerPlusExtraSample = l_int_NumberOfSamplesPerContainer + 1;
              l_flt_TotalVolumePerContainer = ((l_int_NumberOfSamplesPerContainerPlusExtraSample * i_flt_VolumePerSample)* i_flt_DeadVolumeReagent) + i_flt_DeadVolumeLabware;
              l_flt_TotalVolumePerContainer = MthRound(l_flt_TotalVolumePerContainer, 1);
              l_int_RemainingNumberOfContainers = l_int_NumberOfContainersNeeded;
              {
                for(loopCounter2 = 0; loopCounter2 < l_int_RemainingNumberOfSamples;)
                {
                  loopCounter2 = loopCounter2 + 1;
                  l_flt_TotalVolumeRequired = l_flt_TotalVolumeRequired + l_flt_TotalVolumePerContainer;
                  _GenerateString(l_flt_TotalVolumePerContainer, l_str_VolumeAndUnits);
                  l_arr_intNumberOfSamplesPerContainer.AddAsLast(l_int_NumberOfSamplesPerContainerPlusExtraSample);
                  l_arr_strDescriptionVolumePerContainer.AddAsLast(l_str_VolumeAndUnits);
                  l_arr_strReagentTypePerContainer.AddAsLast(i_str_ReagentType);
                  l_arr_strReagentNamePerContainer.AddAsLast(i_str_ReagentName);
                  l_arr_strLabwareTypePerContainer.AddAsLast(i_str_LabwareTypeId);
                  l_arr_fltVolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
                  l_str_ReagentNameLabwareType = StrConcat8(i_str_ReagentName, Translate("("), i_str_LabwareTypeId, Translate(")"), Translate(""), Translate(""), Translate(""), Translate(""));
                  l_arr_strReagentNameLabwareTypePerContainer.AddAsLast(l_str_ReagentNameLabwareType);
                  l_int_RemainingNumberOfContainers = l_int_RemainingNumberOfContainers - 1;
                }
              }
              l_flt_TotalVolumePerContainer = ((l_int_NumberOfSamplesPerContainer * i_flt_VolumePerSample)* i_flt_DeadVolumeReagent) + i_flt_DeadVolumeLabware;
              l_flt_TotalVolumePerContainer = MthRound(l_flt_TotalVolumePerContainer, 1);
              {
                for(loopCounter1 = 0; loopCounter1 < l_int_RemainingNumberOfContainers;)
                {
                  loopCounter1 = loopCounter1 + 1;
                  l_flt_TotalVolumeRequired = l_flt_TotalVolumeRequired + l_flt_TotalVolumePerContainer;
                  _GenerateString(l_flt_TotalVolumePerContainer, l_str_VolumeAndUnits);
                  l_arr_intNumberOfSamplesPerContainer.AddAsLast(l_int_NumberOfSamplesPerContainer);
                  l_arr_strDescriptionVolumePerContainer.AddAsLast(l_str_VolumeAndUnits);
                  l_arr_strReagentTypePerContainer.AddAsLast(i_str_ReagentType);
                  l_arr_strReagentNamePerContainer.AddAsLast(i_str_ReagentName);
                  l_arr_strLabwareTypePerContainer.AddAsLast(i_str_LabwareTypeId);
                  l_arr_fltVolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
                  l_str_ReagentNameLabwareType = StrConcat8(i_str_ReagentName, Translate("("), i_str_LabwareTypeId, Translate(")"), Translate(""), Translate(""), Translate(""), Translate(""));
                  l_arr_strReagentNameLabwareTypePerContainer.AddAsLast(l_str_ReagentNameLabwareType);
                }
              }
            }
            else
            {
              l_flt_TotalVolumePerContainer = ((l_int_NumberOfSamplesPerContainer * i_flt_VolumePerSample)* i_flt_DeadVolumeReagent) + i_flt_DeadVolumeLabware;
              l_flt_TotalVolumePerContainer = MthRound(l_flt_TotalVolumePerContainer, 1);
              {
                for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfContainersNeeded;)
                {
                  loopCounter1 = loopCounter1 + 1;
                  l_flt_TotalVolumeRequired = l_flt_TotalVolumeRequired + l_flt_TotalVolumePerContainer;
                  _GenerateString(l_flt_TotalVolumePerContainer, l_str_VolumeAndUnits);
                  l_arr_intNumberOfSamplesPerContainer.AddAsLast(l_int_NumberOfSamplesPerContainer);
                  l_arr_strDescriptionVolumePerContainer.AddAsLast(l_str_VolumeAndUnits);
                  l_arr_strReagentTypePerContainer.AddAsLast(i_str_ReagentType);
                  l_arr_strReagentNamePerContainer.AddAsLast(i_str_ReagentName);
                  l_arr_strLabwareTypePerContainer.AddAsLast(i_str_LabwareTypeId);
                  l_arr_fltVolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
                  l_str_ReagentNameLabwareType = StrConcat8(i_str_ReagentName, Translate(" ("), i_str_LabwareTypeId, Translate(")"), Translate(""), Translate(""), Translate(""), Translate(""));
                  l_arr_strReagentNameLabwareTypePerContainer.AddAsLast(l_str_ReagentNameLabwareType);
                }
              }
            }
            TrcTrace(Translate("l_flt_TotalVolumeRequired: "), l_flt_TotalVolumeRequired);
            l_arr_fltTotalVolumeForThisReagent.AddAsLast(l_flt_TotalVolumeRequired);
            l_arr_strNameForThisReagent.AddAsLast(i_str_ReagentName);
            l_arr_strLabwareTypeForThisReagent.AddAsLast(i_str_LabwareTypeId);
            MECC::TraceComment(Translate("------------------------------ ARRAYS WITH DATA PER CONTAINER ----------------------------"));
            if(0){
              Util2::Debug::TraceArray(Translate("-------------- l_arr_strReagentNamePerContainer: "), l_arr_strReagentNamePerContainer);
              Util2::Debug::TraceArray(Translate("-------------- l_arr_strReagentTypePerContainer: "), l_arr_strReagentTypePerContainer);
              Util2::Debug::TraceArray(Translate("-------------- l_arr_strDescriptionVolumePerContainer: "), l_arr_strDescriptionVolumePerContainer);
              Util2::Debug::TraceArray(Translate("-------------- l_arr_strLabwareTypePerContainer: "), l_arr_strLabwareTypePerContainer);
              Util2::Debug::TraceArray(Translate("-------------- l_arr_intNumberOfSamplesPerContainer: "), l_arr_intNumberOfSamplesPerContainer);
              Util2::Debug::TraceArray(Translate("-------------- l_arr_fltVolumePerContainer: "), l_arr_fltVolumePerContainer);
            }
            MECC::TraceComment(Translate("-------------------------------------------------------------------------------------------------------------------------"));
          }
          l_int_NumberOfContainersNeeded_Temp = l_int_NumberOfContainersNeeded;
        }
      }
      MECC::TraceComment(Translate("----------------------- Define sequence"));
      l_int_NumberOfContainersNeeded=l_arr_strDescriptionVolumePerContainer.GetSize();
      if (i_int_StartingPoint == 0)
      {
        l_int_currentPosition = i_seq_Template.GetCurrentPosition();
        i_seq_Template.SetCurrentPosition(l_int_currentPosition);
      }
      else
      {
        i_seq_Template.SetCurrentPosition(i_int_StartingPoint);
      }
      SeqRemoveAll(l_seq_Template);
      {
        for(loopCounter4 = 0; loopCounter4 < l_int_NumberOfContainersNeeded;)
        {
          loopCounter4 = loopCounter4 + 1;
          l_strLabwareId = SeqGetLabwareId(i_seq_Template);
          l_intStringFound = StrFind(l_strLabwareId, Translate("RGT"));
          l_strPositionId = SeqGetPositionId(i_seq_Template);
          if (l_intStringFound >= 0)
          {
            _ConvertValueToString(i_int_StartingPoint, i_strStartingPoint);
            l_intPosID = 0;
            {
              for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfChannelsInstalled;)
              {
                loopCounter3 = loopCounter3 + 1;
                if (l_int_NumberOfChannelsInstalled == 8)
                {
                  l_intPosID = l_intPosID + 1;
                }
                if (l_int_NumberOfChannelsInstalled == 4)
                {
                  l_intPosID = l_intPosID + 2;
                }
                _ConvertValueToString(l_intPosID, l_strPositionId);
                SeqAdd(l_seq_Template, l_strLabwareId, l_strPositionId);
              }
            }
            _GetCarrierIDandSiteID_FromLabID(ML_STAR, l_strLabwareId, l_str_CarrierID, l_str_SiteID);
            l_arr_strPositionsId.AddAsLast(l_str_SiteID);
            l_arr_strCarrierId.AddAsLast(l_str_CarrierID);
          }
          else
          {
            SeqAdd(l_seq_Template, l_strLabwareId, l_strPositionId);
            _GetCarrierIDandSiteID_FromLabID(ML_STAR, l_strLabwareId, l_str_CarrierID, l_str_SiteID);
            l_intStringFound_2 = StrFind(l_strLabwareId, Translate("MultiTubeAdapter"));
            if (l_intStringFound_2 >= 0)
            {
              l_strPositionId = StrConcat8(Translate("MultiTubeAdapter_"), l_strPositionId, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            }
            l_arr_strPositionsId.AddAsLast(l_strPositionId);
            l_arr_strCarrierId.AddAsLast(l_str_CarrierID);
          }
          SeqIncrement(i_seq_Template, 1);
        }
      }
      if(0){
        Util2::Debug::TraceArray(Translate("-------------- l_arr_strPositionsId: "), l_arr_strPositionsId);
        Util2::Debug::TraceArray(Translate("-------------- l_arr_strCarrierId: "), l_arr_strCarrierId);
      }
      l_seq_Template.SetCurrentPosition(1);
      if (l_intStringFound >= 0)
      {
        g_arr_DB_seqSequenceToAspirateForEachReagent.AddAsLast(l_seq_Template);
      }
      else
      {
        SeqCopySequence(l_seq_Template_copy, l_seq_Template);
        SeqRemoveAll(l_seq_Template_copy);
        l_seq_Template.SetCurrentPosition(1);
        l_intTotalPositionSeqTemplate = SeqGetTotal(l_seq_Template);
        l_intPositionCounter = 0;
        {
          for(loopCounter6 = 0; loopCounter6 < i_int_NumberOfSamples;)
          {
            loopCounter6 = loopCounter6 + 1;
            l_intPositionCounter = l_intPositionCounter + 1;
            l_strLabId = SeqGetLabwareId(l_seq_Template);
            l_strPositionId = SeqGetPositionId(l_seq_Template);
            SeqAdd(l_seq_Template_copy, l_strLabId, l_strPositionId);
            SeqIncrement(l_seq_Template, 1);
            if (l_intPositionCounter == l_intTotalPositionSeqTemplate)
            {
              l_intPositionCounter = 0;
              l_seq_Template.SetCurrentPosition(1);
            }
          }
        }
        SeqRemoveAll(l_seq_Template);
        SeqCopySequence(l_seq_Template, l_seq_Template_copy);
        l_seq_Template.SetCurrentPosition(1);
        g_arr_DB_seqSequenceToAspirateForEachReagent.AddAsLast(l_seq_Template);
      }
      if(0){
        TrcTraceSequence(l_seq_Template);
      }
      o_seqCreated = HSLExtensions::Sequence::Copy(l_seq_Template, 1);
      TrcTraceSequence(o_seqCreated);
      if (i_str_ReagentType == ARW_Global::ReagentType::Mastermix)
      {
        ARRAYTOOLS::ArrayVLookUp(g_arr_strMastermixComponentNames, g_arr_strMastermixNames, i_str_ReagentName, l_arr_MastermixComponentsNames_ForThisMastermix);
        ARRAYTOOLS::ArrayVLookUp(g_arr_fltMastermixComponentsVolumes, g_arr_strMastermixNames, i_str_ReagentName, l_arr_MastermixComponentsVolumes_ForThisMastermix);
        l_int_NumberOfMastermixComponents_ForThisMastermix=l_arr_MastermixComponentsNames_ForThisMastermix.GetSize();
        {
          for(loopCounter5 = 0; loopCounter5 < l_int_NumberOfMastermixComponents_ForThisMastermix;)
          {
            loopCounter5 = loopCounter5 + 1;
            Calculate_TotalVolume_MastermixComponent(i_str_ReagentName, l_arr_MastermixComponentsNames_ForThisMastermix.ElementAt( loopCounter5 -1), i_flt_VolumePerSample, l_flt_TotalVolumeRequired, l_arr_MastermixComponentsVolumes_ForThisMastermix.ElementAt( loopCounter5 -1));
          }
        }
      }
      g_arr_DB_strNameForEachReagent = HSLExtensions::Array::Concat(g_arr_DB_strNameForEachReagent, l_arr_strNameForThisReagent);
      g_arr_DB_fltTotalVolumeRequiredForEachReagent = HSLExtensions::Array::Concat(g_arr_DB_fltTotalVolumeRequiredForEachReagent, l_arr_fltTotalVolumeForThisReagent);
      g_arr_DB_strLabwareTypeForEachReagent = HSLExtensions::Array::Concat(g_arr_DB_strLabwareTypeForEachReagent, l_arr_strLabwareTypeForThisReagent);
      g_arr_DB_strReagentNameLabwareTypePerContainer = HSLExtensions::Array::Concat(g_arr_DB_strReagentNameLabwareTypePerContainer, l_arr_strReagentNameLabwareTypePerContainer);
      g_arr_DB_strDescriptionVolumePerContainer = HSLExtensions::Array::Concat(g_arr_DB_strDescriptionVolumePerContainer, l_arr_strDescriptionVolumePerContainer);
      g_arr_DB_strReagentTypePerContainer = HSLExtensions::Array::Concat(g_arr_DB_strReagentTypePerContainer, l_arr_strReagentTypePerContainer);
      g_arr_DB_strReagentNamePerContainer = HSLExtensions::Array::Concat(g_arr_DB_strReagentNamePerContainer, l_arr_strReagentNamePerContainer);
      g_arr_DB_strLabwareTypePerContainer = HSLExtensions::Array::Concat(g_arr_DB_strLabwareTypePerContainer, l_arr_strLabwareTypePerContainer);
      g_arr_DB_strPositionIdPerContainer = HSLExtensions::Array::Concat(g_arr_DB_strPositionIdPerContainer, l_arr_strPositionsId);
      g_arr_DB_strCarrierNamePerContainer = HSLExtensions::Array::Concat(g_arr_DB_strCarrierNamePerContainer, l_arr_strCarrierId);
      g_arr_DB_fltVolumePerContainer = HSLExtensions::Array::Concat(g_arr_DB_fltVolumePerContainer, l_arr_fltVolumePerContainer);
    }
    return;
  }
} // library namespace
