#pragma once
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLTrcLib.hsl"
#include "HSLMappingReport.hsl"
#include "HSLDevLib.hsl"
#include "HSLUtilLib.hsl"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace WORKLIST {
  variable t_int_NumberOfTargetsFromFile;
  variable t_arr_NumberOfSamplePerPool[];
  variable t_arr_SourceWellID[];
  variable t_arr_Disctint_Pool_Well[];
  variable t_arr_Filtered_Source_Well_Concentration[];
  variable t_int_NumberOfSamplesFromFile;
  function A_WorkList_Read( device & i_MLSTAR, variable i_hdl_InputWorklist, variable i_bln_SetConcentrationFilterOnWorklist, variable i_flt_MinimumConcentration, variable i_flt_MaximumConcentration, sequence i_seq_SourcePlate, sequence & o_seq_SourceAsp, sequence i_seq_TargetPlate, sequence & o_seq_TargetDisp, variable & o_int_NumberOfSamplesFromFile, variable & o_int_NumberOfTargetsFromFile, variable & o_arr_SourceWellPositions[], variable & o_arr_TargetWellPositionsDistinct[] ) void ;
  function B_IntermediateNormalisation( device & i_ML_STAR, variable i_hdl_InputWorklist, variable i_flt_SourceVolume, variable i_flt_IntermediateVolume, variable i_flt_DestinationVolume, variable i_flt_DestinationYield, sequence i_seq_IntermediateLabware, sequence & o_seq_IntermediateDispSequence, variable & i_arr_SourceWellID[], variable & o_arr_IntermediateWellIDs[], variable & o_arr_VolumesSourceToIntermediate[], variable & o_arr_VolumesDiluentToIntermediate[] ) void ;
  function B_NormaliseOnPooling( device & i_MLSTAR, variable i_hdl_InputWorklist, variable i_flt_TargetVolume, variable i_flt_TargetYield, variable & i_arr_SourceWellID[], variable & i_arr_TargetWellID[], variable & o_arr_VolumeSourceArray[], variable & o_arr_VolumeDiluentArray[], variable & o_arr_TargetWellIDs[] ) void ;
  function C_Barcoding_Adapters( device & i_MLSTAR, variable i_hdl_InputWorklist, variable & i_arr_SourceWellID[], sequence i_seq_BarcodesTubesOrPlate, sequence i_seq_BarcodesDestPlate, sequence & o_seq_BarcodeAsp, sequence & o_seq_BarcodeDisp, variable & o_arr_BarcodeDistinct[], variable & o_arr_BarcodeFrequency[] ) void ;
  function D_FixedSampleVolumeVariableSampleNumberPooling( variable i_flt_VolumePerSample, variable & o_arr_fltVolumeOfPools[] ) void ;
  private function Lookup( variable & array[], variable item ) variable ;
  private function SortOneSequenceAndOneArrayForChannels( sequence & sequence_for_sorting, variable & array[], device & ML_STAR ) void ;
  private function SortTwoSequencesAndOneArrayForChannels( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array[], device & ML_STAR ) void ;
  private function SortTwoSequencesAndTwoArraysForChannels( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array_volume[], variable & array_2[], device & ML_STAR ) void ;
  private function SortTwoSequencesAndTwoStringArraysForChannels( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array_volume[], variable & array_2[], device & ML_STAR ) void ;
  private function _version(  ) void ;
  private function get_distinct_from_array( variable & i_arr[], variable & o_arr[] ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function A_WorkList_Read( device & i_MLSTAR, variable i_hdl_InputWorklist, variable i_bln_SetConcentrationFilterOnWorklist, variable i_flt_MinimumConcentration, variable i_flt_MaximumConcentration, sequence i_seq_SourcePlate, sequence & o_seq_SourceAsp, sequence i_seq_TargetPlate, sequence & o_seq_TargetDisp, variable & o_int_NumberOfSamplesFromFile, variable & o_int_NumberOfTargetsFromFile, variable & o_arr_SourceWellPositions[], variable & o_arr_TargetWellPositionsDistinct[] ) void {
    private variable file1_Source_Well;
    private variable l_str_DummyLabwareId_Asp;
    private variable l_flt_massPerSample;
    private variable l_flt_volumePerSample;
    private variable l_int_NumberOfSamples;
    private variable file1_Target_Well;
    private variable l_str_SQLSentence;
    private variable file1_Source_SampleID;
    private variable loopCounter1;
    private variable l_int_NumberOfDistinctPoolWells;
    private variable loopCounter2;
    private variable l_str_DummyLabwareId_DiluentDisp;
    private variable loopCounter3;
    private variable l_str_DummyLabwareId_Disp;
    private variable l_str_PoolWell_Id;
    private variable file1_Source_Concentration_ng_uL_;
    private file file1;
    private sequence l_seq_TargetDisp;
    private variable l_arr_TargetWellPositions[];
    { sequence __temp; o_seq_SourceAsp = __temp; }
    { sequence __temp; o_seq_TargetDisp = __temp; }
    o_int_NumberOfSamplesFromFile = 0;
    o_int_NumberOfTargetsFromFile = 0;
    o_arr_SourceWellPositions.SetSize( 0);
    o_arr_TargetWellPositionsDistinct.SetSize( 0);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: WORKLIST_READ STARTED\n************************************************************************************************************\n"));
    l_flt_massPerSample = 0.0;
    l_flt_volumePerSample = 0.0;
    l_str_DummyLabwareId_DiluentDisp = SeqGetLabwareId(i_seq_TargetPlate);
    l_str_DummyLabwareId_Asp = SeqGetLabwareId(i_seq_SourcePlate);
    l_str_DummyLabwareId_Disp = SeqGetLabwareId(i_seq_TargetPlate);
    file1.AddField("Target_Well", file1_Target_Well, hslString, 255);
    if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslRead, "Select distinct [Target_Well] from [Sheet1$]") )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
    }
    t_arr_Disctint_Pool_Well.SetSize(0);
    t_arr_Filtered_Source_Well_Concentration.SetSize(0);
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        t_arr_Disctint_Pool_Well.AddAsLast(file1_Target_Well);
        Trace("file1_Target_Well: ",file1_Target_Well);
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    l_int_NumberOfDistinctPoolWells=t_arr_Disctint_Pool_Well.GetSize();
    o_int_NumberOfTargetsFromFile = l_int_NumberOfDistinctPoolWells;
    t_int_NumberOfTargetsFromFile = o_int_NumberOfTargetsFromFile;
    t_arr_NumberOfSamplePerPool.SetSize(0);
    t_arr_SourceWellID.SetSize(0);
    l_arr_TargetWellPositions.SetSize(0);
    o_arr_SourceWellPositions.SetSize(0);
    if (i_bln_SetConcentrationFilterOnWorklist == ASWGLOBAL::BOOL::TRUE)
    {
      {
        for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfDistinctPoolWells;)
        {
          loopCounter2 = loopCounter2 + 1;
          l_int_NumberOfSamples = 0;
          l_str_PoolWell_Id=t_arr_Disctint_Pool_Well.GetAt(loopCounter2-1);
          l_str_SQLSentence = StrConcat8(Translate("Select * from [Sheet1$] where [Target_Well] = '"), l_str_PoolWell_Id, Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          Trace("l_str_SQLSentence: ",l_str_SQLSentence);
          file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
          file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
          file1.AddField("Target_Well", file1_Target_Well, hslString, 255);
          file1.AddField("Source_Concentration(ng/uL)", file1_Source_Concentration_ng_uL_, hslFloat);
          if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslRead, l_str_SQLSentence) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
          }
          {
            loopCounter3 = 0;
            while (
               (file1.Eof() == 0)
            )
            {
              loopCounter3 = loopCounter3 + 1;
              if( 0 == file1.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if (file1_Source_Concentration_ng_uL_ <= i_flt_MaximumConcentration)
              {
                if (file1_Source_Concentration_ng_uL_ >= i_flt_MinimumConcentration)
                {
                  l_int_NumberOfSamples = l_int_NumberOfSamples + 1;
                  SeqAdd(o_seq_SourceAsp, l_str_DummyLabwareId_Asp, file1_Source_Well);
                  t_arr_SourceWellID.AddAsLast(file1_Source_Well);
                  SeqAdd(o_seq_TargetDisp, l_str_DummyLabwareId_Disp, l_str_PoolWell_Id);
                  SeqAdd(l_seq_TargetDisp, l_str_DummyLabwareId_Disp, l_str_PoolWell_Id);
                  o_arr_SourceWellPositions.AddAsLast(file1_Source_Well);
                  l_arr_TargetWellPositions.AddAsLast(l_str_PoolWell_Id);
                  t_arr_Filtered_Source_Well_Concentration.AddAsLast(file1_Source_Concentration_ng_uL_);
                }
              }
            }
          }
          t_arr_NumberOfSamplePerPool.AddAsLast(l_int_NumberOfSamples);
        }
      }
    }
    else
    {
      {
        for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfDistinctPoolWells;)
        {
          loopCounter2 = loopCounter2 + 1;
          l_int_NumberOfSamples = 0;
          l_str_PoolWell_Id=t_arr_Disctint_Pool_Well.GetAt(loopCounter2-1);
          l_str_SQLSentence = StrConcat8(Translate("Select * from [Sheet1$] where [Target_Well] = '"), l_str_PoolWell_Id, Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          Trace("l_str_SQLSentence: ",l_str_SQLSentence);
          file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
          file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
          file1.AddField("Target_Well", file1_Target_Well, hslString, 255);
          if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslRead, l_str_SQLSentence) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
          }
          {
            loopCounter3 = 0;
            while (
               (file1.Eof() == 0)
            )
            {
              loopCounter3 = loopCounter3 + 1;
              if( 0 == file1.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              l_int_NumberOfSamples = l_int_NumberOfSamples + 1;
              SeqAdd(o_seq_SourceAsp, l_str_DummyLabwareId_Asp, file1_Source_Well);
              t_arr_SourceWellID.AddAsLast(file1_Source_Well);
              SeqAdd(o_seq_TargetDisp, l_str_DummyLabwareId_Disp, l_str_PoolWell_Id);
              SeqAdd(l_seq_TargetDisp, l_str_DummyLabwareId_Disp, l_str_PoolWell_Id);
              o_arr_SourceWellPositions.AddAsLast(file1_Source_Well);
              l_arr_TargetWellPositions.AddAsLast(l_str_PoolWell_Id);
            }
          }
        }
      }
      t_arr_NumberOfSamplePerPool.AddAsLast(l_int_NumberOfSamples);
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    o_seq_SourceAsp.SetCurrentPosition(1);
    o_seq_TargetDisp.SetCurrentPosition(1);
    TrcTraceSequence(o_seq_SourceAsp);
    TrcTraceSequence(o_seq_TargetDisp);
    o_int_NumberOfSamplesFromFile = SeqGetTotal(o_seq_SourceAsp);
    t_int_NumberOfSamplesFromFile = o_int_NumberOfSamplesFromFile;
    Util2::Debug::TraceArray(Translate("t_arr_NumberOfSamplePerPool: "), t_arr_NumberOfSamplePerPool);
    if(0){
      SortTwoSequencesAndOneArrayForChannels(o_seq_SourceAsp, o_seq_TargetDisp, o_arr_SourceWellPositions, i_MLSTAR);
    }
    MECC::TraceComment(Translate("************************************************************************************************************\n                    Samples\n************************************************************************************************************\n"));
    TrcTraceSequence(o_seq_SourceAsp);
    Util2::Debug::TraceArray(Translate("o_arr_SampleWellPositions: "), o_arr_SourceWellPositions);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    Targets\n************************************************************************************************************\n"));
    TrcTraceSequence(o_seq_TargetDisp);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    REARRAGANGIN ARRAYS AND SEQUENCES\n************************************************************************************************************\n"));
    if(0){
      SortTwoSequencesAndTwoArraysForChannels(o_seq_SourceAsp, o_seq_TargetDisp, o_arr_SourceWellPositions, o_arr_TargetWellPositionsDistinct, i_MLSTAR);
    }
    SortTwoSequencesAndTwoStringArraysForChannels(o_seq_SourceAsp, o_seq_TargetDisp, o_arr_SourceWellPositions, l_arr_TargetWellPositions, i_MLSTAR);
    TrcTraceSequence(o_seq_SourceAsp);
    Util2::Debug::TraceArray(Translate("o_arr_SampleWellPositions: "), o_arr_SourceWellPositions);
    TrcTraceSequence(o_seq_TargetDisp);
    Util2::Debug::TraceArray(Translate("l_arr_TargetWellPositions: "), l_arr_TargetWellPositions);
    get_distinct_from_array(l_arr_TargetWellPositions, o_arr_TargetWellPositionsDistinct);
    Util2::Debug::TraceArray(Translate("o_arr_TargetWellPositionsDistinct: "), o_arr_TargetWellPositionsDistinct);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: WORKLIST_READ COMPLETED\n************************************************************************************************************\n"));
  }

  private function SortTwoSequencesAndTwoArraysForChannels( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array_volume[], variable & array_2[], device & ML_STAR ) void {
    private variable Unique_y_coordinate;
    private variable lookup_return;
    private variable deltaY;
    private variable LoopsNum;
    private variable disp_labid;
    private variable volume2;
    private variable sql_statement;
    private variable asp_angle;
    private variable seq_sort_file2;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable disp_posid;
    private variable volume;
    private variable array_size;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable Unique_x_coordinate;
    private variable seq_sort_file;
    private variable loopCounter3;
    private variable asp_x_coord;
    private variable asp_y_coord;
    private variable asp_z_coord;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable loopCounter6;
    private file seq_sort;
    private file seq_sort2;
    private variable arr_valuesycoord[];
    private variable arr_valuesdestposid[];
    private variable arr_valuesvol2[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable unique_x_coordinates[];
    private variable arr_valuesvol[];
    private variable arr_valuespdestlabid[];
    private variable arr_valuesPosID[];
    seq_sort_file = "C:\\temp\\dummy.xls";
    seq_sort_file2 = "C:\\temp\\dummy2.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    seq_sort.AddField("volume2", volume2, hslString, 255);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        disp_labid = SeqGetLabwareId(secondary_seq);
        disp_posid = SeqGetPositionId(secondary_seq);
        volume=array_volume.GetAt(loopCounter1-1);
        volume2=array_2.GetAt(loopCounter1-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        SeqIncrement(secondary_seq, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = "SELECT * FROM sheet1 ORDER BY  asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    seq_sort.AddField("volume2", volume2, hslString, 255);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort2.AddField("volume", volume, hslFloat);
    seq_sort2.AddField("volume2", volume2, hslString, 255);
    seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
    }
    Unique_x_coordinate = 0;
    unique_x_coordinates.SetSize(0);
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (asp_x_coord != Unique_x_coordinate)
        {
          unique_x_coordinates.AddAsLast(asp_x_coord);
          Unique_x_coordinate = asp_x_coord;
        }
        if( 0 == seq_sort2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    if( 0 != seq_sort2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort2.RemoveFields();
    array_size=unique_x_coordinates.GetSize();
    SeqRemoveAll(sequence_for_sorting);
    SeqRemoveAll(secondary_seq);
    array_volume.SetSize(0);
    array_2.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < array_size;)
      {
        loopCounter2 = loopCounter2 + 1;
        arr_valuesLabID.SetSize(0);
        arr_valuesPosID.SetSize(0);
        arr_valuesycoord.SetSize(0);
        arr_valuesvol.SetSize(0);
        arr_valuesvol2.SetSize(0);
        arr_valuesprocessed.SetSize(0);
        arr_valuespdestlabid.SetSize(0);
        arr_valuesdestposid.SetSize(0);
        asp_x_coord=unique_x_coordinates.GetAt(loopCounter2-1);
        sql_statement = StrConcat4(Translate("SELECT * FROM [sheet1$] WHERE [asp_X_coord] = "), asp_x_coord, Translate(""), Translate(""));
        seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
        seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
        seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
        seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
        seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
        seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
        seq_sort2.AddField("volume", volume, hslFloat);
        seq_sort2.AddField("volume2", volume2, hslString, 255);
        seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
        seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
        if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1$", hslRead, sql_statement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (seq_sort2.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == seq_sort2.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            arr_valuesLabID.AddAsLast(asp_labid);
            arr_valuesPosID.AddAsLast(asp_pos_id);
            arr_valuesycoord.AddAsLast(asp_y_coord);
            arr_valuesvol.AddAsLast(volume);
            arr_valuesvol2.AddAsLast(volume2);
            arr_valuesprocessed.AddAsLast(0);
            arr_valuespdestlabid.AddAsLast(disp_labid);
            arr_valuesdestposid.AddAsLast(disp_posid);
          }
        }
        {
          loopCounter6 = 0;
          while (1 == 1)
          {
            loopCounter6 = loopCounter6 + 1;
            lookup_return = Lookup(arr_valuesprocessed, 0);
            if (lookup_return == 0)
            {
              break;
            }
            Unique_y_coordinate = 10000000;
            LoopsNum=arr_valuesLabID.GetSize();
            {
              for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
              {
                loopCounter4 = loopCounter4 + 1;
                if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == 0)
                {
                  asp_y_coord=arr_valuesycoord.GetAt(loopCounter4-1);
                  deltaY = Unique_y_coordinate - asp_y_coord;
                  if (deltaY >= 9)
                  {
                    asp_labid=arr_valuesLabID.GetAt(loopCounter4-1);
                    asp_pos_id=arr_valuesPosID.GetAt(loopCounter4-1);
                    disp_labid=arr_valuespdestlabid.GetAt(loopCounter4-1);
                    disp_posid=arr_valuesdestposid.GetAt(loopCounter4-1);
                    volume=arr_valuesvol.GetAt(loopCounter4-1);
                    volume2=arr_valuesvol2.GetAt(loopCounter4-1);
                    SeqAdd(sequence_for_sorting, asp_labid, asp_pos_id);
                    SeqAdd(secondary_seq, disp_labid, disp_posid);
                    Unique_y_coordinate = asp_y_coord;
                    array_volume.AddAsLast(volume);
                    array_2.AddAsLast(volume2);
                    arr_valuesprocessed.SetAt(loopCounter4-1, 1);
                  }
                }
              }
            }
          }
        }
        if( 0 != seq_sort2.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        seq_sort2.RemoveFields();
      }
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
  }

  private function SortOneSequenceAndOneArrayForChannels( sequence & sequence_for_sorting, variable & array[], device & ML_STAR ) void {
    private variable Unique_y_coordinate;
    private variable lookup_return;
    private variable deltaY;
    private variable LoopsNum;
    private variable asp_angle;
    private variable sql_statement;
    private variable seq_sort_file2;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable volume;
    private variable array_size;
    private variable loopCounter1;
    private variable Unique_x_coordinate;
    private variable loopCounter2;
    private variable seq_sort_file;
    private variable asp_y_coord;
    private variable loopCounter3;
    private variable asp_x_coord;
    private variable asp_z_coord;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable loopCounter6;
    private file seq_sort;
    private file seq_sort2;
    private variable arr_valuesycoord[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable unique_x_coordinates[];
    private variable arr_valuesvol[];
    private variable arr_valuesPosID[];
    seq_sort_file = "C:\\temp\\dummy.xls";
    seq_sort_file2 = "C:\\temp\\dummy2.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    sequence_for_sorting.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        volume=array.GetAt(loopCounter1-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = "SELECT * FROM sheet1 ORDER BY  asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort2.AddField("volume", volume, hslString, 255);
    if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
    }
    Unique_x_coordinate = 0;
    unique_x_coordinates.SetSize(0);
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (asp_x_coord != Unique_x_coordinate)
        {
          unique_x_coordinates.AddAsLast(asp_x_coord);
          Unique_x_coordinate = asp_x_coord;
        }
        if( 0 == seq_sort2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    if( 0 != seq_sort2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort2.RemoveFields();
    array_size=unique_x_coordinates.GetSize();
    SeqRemoveAll(sequence_for_sorting);
    array.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < array_size;)
      {
        loopCounter2 = loopCounter2 + 1;
        arr_valuesLabID.SetSize(0);
        arr_valuesPosID.SetSize(0);
        arr_valuesycoord.SetSize(0);
        arr_valuesvol.SetSize(0);
        arr_valuesprocessed.SetSize(0);
        asp_x_coord=unique_x_coordinates.GetAt(loopCounter2-1);
        sql_statement = StrConcat4(Translate("SELECT * FROM [sheet1$] WHERE [asp_X_coord] = "), asp_x_coord, Translate(""), Translate(""));
        seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
        seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
        seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
        seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
        seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
        seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
        seq_sort2.AddField("volume", volume, hslString, 255);
        if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1$", hslRead, sql_statement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (seq_sort2.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == seq_sort2.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            arr_valuesLabID.AddAsLast(asp_labid);
            arr_valuesPosID.AddAsLast(asp_pos_id);
            arr_valuesycoord.AddAsLast(asp_y_coord);
            arr_valuesvol.AddAsLast(volume);
            arr_valuesprocessed.AddAsLast(0);
          }
        }
        {
          loopCounter6 = 0;
          while (1 == 1)
          {
            loopCounter6 = loopCounter6 + 1;
            lookup_return = Lookup(arr_valuesprocessed, 0);
            if (lookup_return == 0)
            {
              break;
            }
            Unique_y_coordinate = 10000000;
            LoopsNum=arr_valuesLabID.GetSize();
            {
              for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
              {
                loopCounter4 = loopCounter4 + 1;
                if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == 0)
                {
                  asp_y_coord=arr_valuesycoord.GetAt(loopCounter4-1);
                  deltaY = Unique_y_coordinate - asp_y_coord;
                  if (deltaY >= 9)
                  {
                    asp_labid=arr_valuesLabID.GetAt(loopCounter4-1);
                    asp_pos_id=arr_valuesPosID.GetAt(loopCounter4-1);
                    volume=arr_valuesvol.GetAt(loopCounter4-1);
                    SeqAdd(sequence_for_sorting, asp_labid, asp_pos_id);
                    Unique_y_coordinate = asp_y_coord;
                    array.AddAsLast(volume);
                    arr_valuesprocessed.SetAt(loopCounter4-1, 1);
                  }
                }
              }
            }
          }
        }
        if( 0 != seq_sort2.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        seq_sort2.RemoveFields();
      }
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    sequence_for_sorting.SetCurrentPosition(1);
  }

  private function SortTwoSequencesAndOneArrayForChannels( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array[], device & ML_STAR ) void {
    private variable Unique_y_coordinate;
    private variable lookup_return;
    private variable deltaY;
    private variable LoopsNum;
    private variable disp_labid;
    private variable asp_angle;
    private variable sql_statement;
    private variable seq_sort_file2;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable disp_posid;
    private variable volume;
    private variable array_size;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable Unique_x_coordinate;
    private variable seq_sort_file;
    private variable loopCounter3;
    private variable asp_x_coord;
    private variable asp_y_coord;
    private variable asp_z_coord;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable loopCounter6;
    private file seq_sort;
    private file seq_sort2;
    private variable arr_valuesycoord[];
    private variable arr_valuesdestposid[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable unique_x_coordinates[];
    private variable arr_valuesvol[];
    private variable arr_valuespdestlabid[];
    private variable arr_valuesPosID[];
    seq_sort_file = "C:\\temp\\dummy.xls";
    seq_sort_file2 = "C:\\temp\\dummy2.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslString, 255);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        disp_labid = SeqGetLabwareId(secondary_seq);
        disp_posid = SeqGetPositionId(secondary_seq);
        volume=array.GetAt(loopCounter1-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        SeqIncrement(secondary_seq, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = "SELECT * FROM sheet1 ORDER BY  asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslString, 255);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort2.AddField("volume", volume, hslString, 255);
    seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
    }
    Unique_x_coordinate = 0;
    unique_x_coordinates.SetSize(0);
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (asp_x_coord != Unique_x_coordinate)
        {
          unique_x_coordinates.AddAsLast(asp_x_coord);
          Unique_x_coordinate = asp_x_coord;
        }
        if( 0 == seq_sort2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    if( 0 != seq_sort2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort2.RemoveFields();
    array_size=unique_x_coordinates.GetSize();
    SeqRemoveAll(sequence_for_sorting);
    SeqRemoveAll(secondary_seq);
    array.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < array_size;)
      {
        loopCounter2 = loopCounter2 + 1;
        arr_valuesLabID.SetSize(0);
        arr_valuesPosID.SetSize(0);
        arr_valuesycoord.SetSize(0);
        arr_valuesvol.SetSize(0);
        arr_valuesprocessed.SetSize(0);
        arr_valuespdestlabid.SetSize(0);
        arr_valuesdestposid.SetSize(0);
        asp_x_coord=unique_x_coordinates.GetAt(loopCounter2-1);
        sql_statement = StrConcat4(Translate("SELECT * FROM [sheet1$] WHERE [asp_X_coord] = "), asp_x_coord, Translate(""), Translate(""));
        seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
        seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
        seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
        seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
        seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
        seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
        seq_sort2.AddField("volume", volume, hslString, 255);
        seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
        seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
        if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1$", hslRead, sql_statement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (seq_sort2.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == seq_sort2.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            arr_valuesLabID.AddAsLast(asp_labid);
            arr_valuesPosID.AddAsLast(asp_pos_id);
            arr_valuesycoord.AddAsLast(asp_y_coord);
            arr_valuesvol.AddAsLast(volume);
            arr_valuesprocessed.AddAsLast(0);
            arr_valuespdestlabid.AddAsLast(disp_labid);
            arr_valuesdestposid.AddAsLast(disp_posid);
          }
        }
        {
          loopCounter6 = 0;
          while (1 == 1)
          {
            loopCounter6 = loopCounter6 + 1;
            lookup_return = Lookup(arr_valuesprocessed, 0);
            if (lookup_return == 0)
            {
              break;
            }
            Unique_y_coordinate = 10000000;
            LoopsNum=arr_valuesLabID.GetSize();
            {
              for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
              {
                loopCounter4 = loopCounter4 + 1;
                if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == 0)
                {
                  asp_y_coord=arr_valuesycoord.GetAt(loopCounter4-1);
                  deltaY = Unique_y_coordinate - asp_y_coord;
                  if (deltaY >= 9)
                  {
                    asp_labid=arr_valuesLabID.GetAt(loopCounter4-1);
                    asp_pos_id=arr_valuesPosID.GetAt(loopCounter4-1);
                    disp_labid=arr_valuespdestlabid.GetAt(loopCounter4-1);
                    disp_posid=arr_valuesdestposid.GetAt(loopCounter4-1);
                    volume=arr_valuesvol.GetAt(loopCounter4-1);
                    SeqAdd(sequence_for_sorting, asp_labid, asp_pos_id);
                    SeqAdd(secondary_seq, disp_labid, disp_posid);
                    Unique_y_coordinate = asp_y_coord;
                    array.AddAsLast(volume);
                    arr_valuesprocessed.SetAt(loopCounter4-1, 1);
                  }
                }
              }
            }
          }
        }
        if( 0 != seq_sort2.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        seq_sort2.RemoveFields();
      }
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
  }

  function D_FixedSampleVolumeVariableSampleNumberPooling( variable i_flt_VolumePerSample, variable & o_arr_fltVolumeOfPools[] ) void {
    private variable l_intNumberOfSamplesForCurrentPool;
    private variable loopCounter1;
    private variable l_fltVolumeOfCurrentPool;
    private variable l_strDescription;
    MECC::TraceComment(Translate("**********************************************************************************************************************************************\n                    WORKLIST:: FIXED SAMPLE VOLUME VARIABLE SAMPLE NUMBER POOLING   STARTED\n**********************************************************************************************************************************************\n"));
    o_arr_fltVolumeOfPools.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < t_int_NumberOfTargetsFromFile;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_intNumberOfSamplesForCurrentPool=t_arr_NumberOfSamplePerPool.GetAt(loopCounter1-1);
        l_fltVolumeOfCurrentPool = l_intNumberOfSamplesForCurrentPool * i_flt_VolumePerSample;
        o_arr_fltVolumeOfPools.AddAsLast(l_fltVolumeOfCurrentPool);
      }
    }
    l_strDescription = StrConcat12(Translate("Target Wells and their resepective Total Volumes following the pooling of variable number of samples."), Translate(" Adding a fixed volume of "), i_flt_VolumePerSample, Translate("uL of each sample into the pool"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Util2::Debug::TraceArray_2(l_strDescription, t_arr_Disctint_Pool_Well, o_arr_fltVolumeOfPools);
    MECC::TraceComment(Translate("**********************************************************************************************************************************************\n                    WORKLIST:: FIXED SAMPLE VOLUME VARIABLE SAMPLE NUMBER POOLING   COMPLETED\n**********************************************************************************************************************************************\n"));
  }

  private function Lookup( variable & array[], variable item ) variable {
    private variable index;
    private variable lookupreturn;
    lookupreturn = Util::Lookup(array, item, index);
    if (lookupreturn > 0)
    {
      index = index + 1;
      return (index);
    }
    else
    {
      return (0);
    }
  }

  private function get_distinct_from_array( variable & i_arr[], variable & o_arr[] ) void {
    private variable arr_counter;
    private variable rtn_index_arr;
    private variable next_item;
    private variable size_i_arr;
    o_arr.SetSize( 0);
    if(0){
      Util2::Debug::TraceArray(Translate("----------- get Distinct function  ----i_arr "), i_arr);
    }
    size_i_arr=i_arr.GetSize();
    {
      for(arr_counter = 0; arr_counter < size_i_arr;)
      {
        arr_counter = arr_counter + 1;
        next_item=i_arr.GetAt(arr_counter-1);
        rtn_index_arr = Lookup(o_arr, next_item);
        if (rtn_index_arr == 0)
        {
          o_arr.AddAsLast(next_item);
        }
      }
    }
    if(0){
      Util2::Debug::TraceArray(Translate(" ---------- o_arr"), o_arr);
    }
  }

  function B_IntermediateNormalisation( device & i_ML_STAR, variable i_hdl_InputWorklist, variable i_flt_SourceVolume, variable i_flt_IntermediateVolume, variable i_flt_DestinationVolume, variable i_flt_DestinationYield, sequence i_seq_IntermediateLabware, sequence & o_seq_IntermediateDispSequence, variable & i_arr_SourceWellID[], variable & o_arr_IntermediateWellIDs[], variable & o_arr_VolumesSourceToIntermediate[], variable & o_arr_VolumesDiluentToIntermediate[] ) void {
    private variable file1_Source_Well;
    private variable l_int_ReturnLookUp;
    private variable file1_Target_Well;
    private variable file1_Source_SampleID;
    private variable loopCounter3;
    private variable file1_Source_Concentration_ng_uL_;
    private file file1;
    private variable l_flt_MinimumSourceConcentration;
    private variable l_flt_IntermediateYield;
    private variable l_flt_MaximumSourceConcentration;
    private variable l_str_ErrorMessage;
    private variable l_flt_DiluentVolume;
    private variable l_flt_SourceVolume;
    private variable l_IntermediateLabwareID;
    { sequence __temp; o_seq_IntermediateDispSequence = __temp; }
    o_arr_IntermediateWellIDs.SetSize( 0);
    o_arr_VolumesSourceToIntermediate.SetSize( 0);
    o_arr_VolumesDiluentToIntermediate.SetSize( 0);
    VectorCustomDialogs::Initialize();
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: INTERMEDIATE NORMALISATION   STARTED\n************************************************************************************************************\n"));
    o_arr_VolumesSourceToIntermediate.SetSize(0);
    o_arr_VolumesDiluentToIntermediate.SetSize(0);
    l_IntermediateLabwareID = SeqGetLabwareId(i_seq_IntermediateLabware);
    file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
    file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
    file1.AddField("Target_Well", file1_Target_Well, hslString, 255);
    file1.AddField("Source_Concentration(ng/uL)", file1_Source_Concentration_ng_uL_, hslFloat);
    if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
    }
    l_flt_IntermediateYield = i_flt_IntermediateVolume / (i_flt_DestinationVolume * 1.0);
    l_flt_IntermediateYield = l_flt_IntermediateYield * i_flt_DestinationYield;
    TrcTrace(Translate("l_flt_IntermediateYield: "), l_flt_IntermediateYield);
    l_flt_MaximumSourceConcentration = l_flt_IntermediateYield;
    TrcTrace(Translate("l_flt_MaximumSourceConcentration: "), l_flt_MaximumSourceConcentration);
    l_flt_MinimumSourceConcentration = l_flt_IntermediateYield / (i_flt_DestinationVolume * 1.0);
    TrcTrace(Translate("l_flt_MinimumSourceConcentration: "), l_flt_MinimumSourceConcentration);
    {
      loopCounter3 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter3 = loopCounter3 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_int_ReturnLookUp = Lookup(t_arr_SourceWellID, file1_Source_Well);
        if (l_int_ReturnLookUp > 0)
        {
          if (file1_Source_Concentration_ng_uL_ <= l_flt_MaximumSourceConcentration)
          {
            if (file1_Source_Concentration_ng_uL_ >= l_flt_MinimumSourceConcentration)
            {
              l_flt_SourceVolume = l_flt_IntermediateYield / (file1_Source_Concentration_ng_uL_ * 1.0);
              if(0){
                TrcTrace(Translate("l_flt_SourceVolume: "), l_flt_SourceVolume);
                TrcTrace(Translate("file1_Source_Concentration_ng_uL_: "), file1_Source_Concentration_ng_uL_);
              }
              o_arr_VolumesSourceToIntermediate.AddAsLast(l_flt_SourceVolume);
              l_flt_DiluentVolume = i_flt_IntermediateVolume - l_flt_SourceVolume;
              o_arr_VolumesDiluentToIntermediate.AddAsLast(l_flt_DiluentVolume);
              SeqAdd(o_seq_IntermediateDispSequence, l_IntermediateLabwareID, file1_Source_Well);
            }
            else
            {
              l_str_ErrorMessage = StrConcat8(Translate("An error has occured during the Normalisation. The user has input a Destination Yield of "), i_flt_DestinationYield, Translate("ng and an Intermediate Volume of "), i_flt_IntermediateVolume, Translate("uL. These settings require that the minimum concentration of Source samples obtained from the input worklist must not be less than "), l_flt_MinimumSourceConcentration, Translate("ng/uL."), Translate("A Source concentration lower than the minimum permitted given the input settings has been detected."));
              VectorCustomDialogs::ErrorDialog(Translate("Normalisation Error"), 0, 0, 0, 0, 0, l_str_ErrorMessage, Translate("Please check your worklist and/or input settings. The method will now abort."));
              abort;
            }
          }
          else
          {
            l_str_ErrorMessage = StrConcat8(Translate("An error has occured during the Normalisation. The user has input a Destination Yield of "), i_flt_DestinationYield, Translate("ng and an Intermediate Volume of "), i_flt_IntermediateVolume, Translate("uL. These settings require that the maximum concentration of Source samples obtained from the input worklist is not greater than "), l_flt_MaximumSourceConcentration, Translate("ng/uL."), Translate("A Source concentration higher than the maximum permitted given the input settings has been detected."));
            VectorCustomDialogs::ErrorDialog(Translate("Normalisation Error"), 0, 0, 0, 0, 0, l_str_ErrorMessage, Translate("Please check your worklist and/or input settings. The method will now abort."));
            abort;
          }
        }
      }
    }
    o_seq_IntermediateDispSequence.SetCurrentPosition(1);
    Util2::Debug::TraceArray_3(Translate("Volume Arrays of Source and Diluent respecitvely for Intermediate Plate: "), i_arr_SourceWellID, o_arr_VolumesSourceToIntermediate, o_arr_VolumesDiluentToIntermediate);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: INTERMEDIATE NORMALISATION   COMPLETED\n************************************************************************************************************\n"));
    VectorCustomDialogs::Terminate();
  }

  function B_NormaliseOnPooling( device & i_MLSTAR, variable i_hdl_InputWorklist, variable i_flt_TargetVolume, variable i_flt_TargetYield, variable & i_arr_SourceWellID[], variable & i_arr_TargetWellID[], variable & o_arr_VolumeSourceArray[], variable & o_arr_VolumeDiluentArray[], variable & o_arr_TargetWellIDs[] ) void {
    private variable file1_Source_Well;
    private variable l_flt_massPerSample;
    private variable l_int_ReturnLookUp;
    private variable l_flt_volumePerSample;
    private variable l_int_ReturnLookUp2;
    private variable file1_Target_Well;
    private variable file1_Source_SampleID;
    private variable l_int_CurrentNumberOfSamplesThisPool;
    private variable loopCounter3;
    private variable file1_Source_Concentration_ng_uL_;
    private file file1;
    private variable l_flt_TotalVolumeSourceCurrentTarget;
    private variable l_intSampleVolumeIndex;
    private variable l_intSourceVolumeIndex;
    private variable l_flt_VolumeCurrentSourceSample;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable l_flt_VolumeCurrentTargetDiluent;
    private variable o_arr_AllTargetWellIDs[];
    private variable l_str_ErrorMessage;
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: NORMALISE ON POOLING   STARTED\n************************************************************************************************************\n"));
    o_arr_AllTargetWellIDs.SetSize(0);
    file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
    file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
    file1.AddField("Target_Well", file1_Target_Well, hslString, 255);
    file1.AddField("Source_Concentration(ng/uL)", file1_Source_Concentration_ng_uL_, hslFloat);
    if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
    }
    {
      loopCounter3 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter3 = loopCounter3 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_int_ReturnLookUp = Lookup(i_arr_SourceWellID, file1_Source_Well);
        if (l_int_ReturnLookUp > 0)
        {
          l_int_ReturnLookUp2 = Lookup(i_arr_TargetWellID, file1_Target_Well);
          l_int_CurrentNumberOfSamplesThisPool=t_arr_NumberOfSamplePerPool.GetAt(l_int_ReturnLookUp2-1);
          l_flt_massPerSample = i_flt_TargetYield / (l_int_CurrentNumberOfSamplesThisPool * 1.0);
          l_flt_volumePerSample = l_flt_massPerSample / (file1_Source_Concentration_ng_uL_ * 1.0);
          if (l_flt_volumePerSample < 1)
          {
            l_str_ErrorMessage = StrConcat8(Translate("The [NormaliseOnPooling] submethod has encountered an error. "), Translate("The sample concentration for sample "), file1_Source_Well, Translate(" is too high given the number of samples, and the target yield set."), Translate("the current settings would result in pipetting "), l_flt_volumePerSample, Translate("uL. As this is below 1uL the method will now abort"), Translate(""));
            VectorCustomDialogs::Initialize();
            VectorCustomDialogs::ErrorDialog(Translate("Normalisation Error"), 0, 0, 0, 0, 0, l_str_ErrorMessage, Translate("Please check your worklist and/or input settings. The method will now abort."));
            VectorCustomDialogs::Terminate();
            abort;
          }
          o_arr_VolumeSourceArray.AddAsLast(l_flt_volumePerSample);
          o_arr_TargetWellIDs.AddAsLast(file1_Target_Well);
        }
      }
    }
    Util2::Debug::TraceArray_3(Translate(" Arrays of Sample Well ID, it's respective Target Well ID, and the volume of Sample added to the Target: "), i_arr_SourceWellID, o_arr_TargetWellIDs, o_arr_VolumeSourceArray);
    l_intSourceVolumeIndex = 0;
    {
      for(loopCounter1 = 0; loopCounter1 < t_int_NumberOfTargetsFromFile;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_int_CurrentNumberOfSamplesThisPool=t_arr_NumberOfSamplePerPool.GetAt(l_int_ReturnLookUp2-1);
        {
          for(loopCounter2 = 0; loopCounter2 < l_int_CurrentNumberOfSamplesThisPool;)
          {
            loopCounter2 = loopCounter2 + 1;
            l_intSourceVolumeIndex = l_intSampleVolumeIndex + 1;
            l_flt_VolumeCurrentSourceSample=o_arr_VolumeSourceArray.GetAt(l_intSourceVolumeIndex-1);
            l_flt_TotalVolumeSourceCurrentTarget = l_flt_TotalVolumeSourceCurrentTarget + l_flt_VolumeCurrentSourceSample;
          }
        }
        l_flt_VolumeCurrentTargetDiluent = i_flt_TargetVolume - l_flt_TotalVolumeSourceCurrentTarget;
        o_arr_VolumeDiluentArray.AddAsLast(l_flt_VolumeCurrentTargetDiluent);
        if (l_flt_VolumeCurrentTargetDiluent < 1)
        {
          l_str_ErrorMessage = StrConcat8(Translate("The [NormaliseOnPooling] submethod has encountered an error. "), Translate("The diluent volume requests for "), i_arr_TargetWellID.ElementAt( loopCounter1 -1), Translate(" is "), l_flt_VolumeCurrentTargetDiluent, Translate("uL. As this is below 1uL the method will now abort."), Translate(""), Translate(""));
          VectorCustomDialogs::Initialize();
          VectorCustomDialogs::ErrorDialog(Translate("Normalisation Error"), 0, 0, 0, 0, 0, l_str_ErrorMessage, Translate("Please check your worklist and/or input settings. The method will now abort."));
          VectorCustomDialogs::Terminate();
          abort;
        }
      }
    }
    Util2::Debug::TraceArray_3(Translate(" Arrays of Target Well, Number of Source samples per Target, and Volume of Diluent for each Target: "), i_arr_TargetWellID, t_arr_NumberOfSamplePerPool, o_arr_VolumeDiluentArray);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: NORMALISE ON POOLING   COMPLETED\n************************************************************************************************************\n"));
  }

  function C_Barcoding_Adapters( device & i_MLSTAR, variable i_hdl_InputWorklist, variable & i_arr_SourceWellID[], sequence i_seq_BarcodesTubesOrPlate, sequence i_seq_BarcodesDestPlate, sequence & o_seq_BarcodeAsp, sequence & o_seq_BarcodeDisp, variable & o_arr_BarcodeDistinct[], variable & o_arr_BarcodeFrequency[] ) void {
    private dialog dialogHandle_1;
    private variable file1_Source_Well;
    private variable loopCounter8;
    private variable l_int_NumberOfSamples;
    private variable l_int_CurrentBarcodeThisPool;
    private variable l_str_DummyLabwareId_BarcodeDisp;
    private variable l_int_BarcodeCheckSize;
    private variable l_int_NumberOfDistinctBarcodes;
    private variable file1_Source_SampleID;
    private variable l_int_NumberOfBarcodes;
    private variable l_str_SQLSentence;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable l_str_DummyLabwareId_BarcodeAsp;
    private variable file1_Barcode;
    private variable l_str_Barcode;
    private file file1;
    private variable l_arr_Barcodes[];
    private variable l_arr_BarcodeCheck[];
    private variable l_arr_BarcodeCheckDistinct[];
    private variable l_int_ReturnLookUp;
    private sequence i_seq_BarcodeTubesOrPlate;
    private sequence i_seq_BarcodeDestPlate;
    private variable l_intBarcodeIndex;
    { sequence __temp; o_seq_BarcodeAsp = __temp; }
    { sequence __temp; o_seq_BarcodeDisp = __temp; }
    o_arr_BarcodeDistinct.SetSize( 0);
    o_arr_BarcodeFrequency.SetSize( 0);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: BARCODE_ADAPTERS   STARTED\n************************************************************************************************************\n"));
    l_str_DummyLabwareId_BarcodeAsp = SeqGetLabwareId(i_seq_BarcodeTubesOrPlate);
    l_str_DummyLabwareId_BarcodeDisp = SeqGetLabwareId(i_seq_BarcodeDestPlate);
    l_arr_Barcodes.SetSize(0);
    l_arr_BarcodeCheckDistinct.SetSize(0);
    file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
    file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
    file1.AddField("Barcode", file1_Barcode, hslString, 255);
    if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
    }
    l_int_NumberOfSamples = 0;
    {
      loopCounter3 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter3 = loopCounter3 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_int_ReturnLookUp = Lookup(i_arr_SourceWellID, file1_Source_Well);
        if (l_int_ReturnLookUp > 0)
        {
          l_int_NumberOfSamples = l_int_NumberOfSamples + 1;
          l_arr_Barcodes.AddAsLast(file1_Barcode);
          SeqAdd(o_seq_BarcodeAsp, l_str_DummyLabwareId_BarcodeAsp, file1_Barcode);
          SeqAdd(o_seq_BarcodeDisp, l_str_DummyLabwareId_BarcodeDisp, file1_Source_Well);
        }
      }
    }
    Util2::Debug::TraceArray_2(Translate(" Array of Samples and their resepective Barcodes: "), i_arr_SourceWellID, l_arr_Barcodes);
    TrcTraceSequence(o_seq_BarcodeAsp);
    TrcTraceSequence(o_seq_BarcodeDisp);
    l_intBarcodeIndex = 0;
    {
      for(loopCounter2 = 0; loopCounter2 < t_int_NumberOfTargetsFromFile;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_arr_BarcodeCheck.SetSize(0);
        {
          for(loopCounter8 = 0; loopCounter8 < t_arr_NumberOfSamplePerPool.ElementAt( loopCounter2 -1);)
          {
            loopCounter8 = loopCounter8 + 1;
            l_intBarcodeIndex = l_intBarcodeIndex + 1;
            l_int_CurrentBarcodeThisPool=l_arr_Barcodes.GetAt(l_intBarcodeIndex-1);
            l_arr_BarcodeCheck.AddAsLast(l_int_CurrentBarcodeThisPool);
          }
        }
        get_distinct_from_array(l_arr_BarcodeCheck, l_arr_BarcodeCheckDistinct);
        Util2::Debug::TraceArray(Translate("l_arr_BarcodeCheckDistinct: "), l_arr_BarcodeCheckDistinct);
        Util2::Debug::TraceArray(Translate("l_arr_BarcodeCheck: "), l_arr_BarcodeCheck);
        l_int_NumberOfDistinctBarcodes=l_arr_BarcodeCheckDistinct.GetSize();
        l_int_BarcodeCheckSize=l_arr_BarcodeCheck.GetSize();
        if (l_int_NumberOfDistinctBarcodes != l_int_BarcodeCheckSize)
        {
          dialogHandle_1.SetOutput(Translate("There are duplicate Barcodes assigned to an identical 'Target_Well' in the worklist."), "\n", Translate(""), "\n", Translate("The method will now Abort!"), "\n", Translate(""), "\n", Translate("Please correct the worklist before attempting to run the method again."), "\n");
          dialogHandle_1.ShowOutput(Translate("Worklist Barcode Check"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          abort;
        }
        if( 0 != file1.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file1.RemoveFields();
      }
    }
    o_arr_BarcodeDistinct.SetSize(0);
    o_arr_BarcodeFrequency.SetSize(0);
    get_distinct_from_array(l_arr_Barcodes, o_arr_BarcodeDistinct);
    l_int_NumberOfDistinctBarcodes=o_arr_BarcodeDistinct.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfDistinctBarcodes;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_int_NumberOfBarcodes = 0;
        l_str_Barcode=o_arr_BarcodeDistinct.GetAt(loopCounter2-1);
        l_str_SQLSentence = StrConcat8(Translate("Select * from [Sheet1$] where [Barcode] = '"), l_str_Barcode, Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        Trace("l_str_SQLSentence: ",l_str_SQLSentence);
        file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
        file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
        file1.AddField("Barcode", file1_Barcode, hslString, 255);
        if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslRead, l_str_SQLSentence) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (file1.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == file1.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            l_int_ReturnLookUp = Lookup(i_arr_SourceWellID, file1_Source_Well);
            if (l_int_ReturnLookUp > 0)
            {
              l_int_NumberOfBarcodes = l_int_NumberOfBarcodes + 1;
            }
          }
        }
        o_arr_BarcodeFrequency.AddAsLast(l_int_NumberOfBarcodes);
        if( 0 != file1.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file1.RemoveFields();
      }
    }
    Util2::Debug::TraceArray_2(Translate("Output Array of Barcodes and their Frequency of Use : "), o_arr_BarcodeDistinct, o_arr_BarcodeFrequency);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: BARCODE_ADAPTERS   COMPLETED\n************************************************************************************************************\n"));
  }

  private function _version(  ) void {
  }

  private function SortTwoSequencesAndTwoStringArraysForChannels( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array_volume[], variable & array_2[], device & ML_STAR ) void {
    private variable Unique_y_coordinate;
    private variable deltaY;
    private variable lookup_return;
    private variable LoopsNum;
    private variable volume2;
    private variable disp_labid;
    private variable sql_statement;
    private variable asp_angle;
    private variable seq_sort_file2;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable volume;
    private variable disp_posid;
    private variable array_size;
    private variable loopCounter1;
    private variable seq_sort_file;
    private variable loopCounter2;
    private variable Unique_x_coordinate;
    private variable loopCounter3;
    private variable asp_x_coord;
    private variable asp_y_coord;
    private variable asp_z_coord;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable loopCounter6;
    private file seq_sort;
    private file seq_sort2;
    private variable arr_valuesycoord[];
    private variable arr_valuesdestposid[];
    private variable arr_valuesvol2[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable unique_x_coordinates[];
    private variable arr_valuesvol[];
    private variable arr_valuespdestlabid[];
    private variable arr_valuesPosID[];
    seq_sort_file = "C:\\temp\\dummy.xls";
    seq_sort_file2 = "C:\\temp\\dummy2.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslString, 255);
    seq_sort.AddField("volume2", volume2, hslString, 255);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        disp_labid = SeqGetLabwareId(secondary_seq);
        disp_posid = SeqGetPositionId(secondary_seq);
        volume=array_volume.GetAt(loopCounter1-1);
        volume2=array_2.GetAt(loopCounter1-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        SeqIncrement(secondary_seq, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = "SELECT * FROM sheet1 ORDER BY  asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslString, 255);
    seq_sort.AddField("volume2", volume2, hslString, 255);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort2.AddField("volume", volume, hslString, 255);
    seq_sort2.AddField("volume2", volume2, hslString, 255);
    seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
    }
    Unique_x_coordinate = 0;
    unique_x_coordinates.SetSize(0);
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (asp_x_coord != Unique_x_coordinate)
        {
          unique_x_coordinates.AddAsLast(asp_x_coord);
          Unique_x_coordinate = asp_x_coord;
        }
        if( 0 == seq_sort2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    if( 0 != seq_sort2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort2.RemoveFields();
    array_size=unique_x_coordinates.GetSize();
    SeqRemoveAll(sequence_for_sorting);
    SeqRemoveAll(secondary_seq);
    array_volume.SetSize(0);
    array_2.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < array_size;)
      {
        loopCounter2 = loopCounter2 + 1;
        arr_valuesLabID.SetSize(0);
        arr_valuesPosID.SetSize(0);
        arr_valuesycoord.SetSize(0);
        arr_valuesvol.SetSize(0);
        arr_valuesvol2.SetSize(0);
        arr_valuesprocessed.SetSize(0);
        arr_valuespdestlabid.SetSize(0);
        arr_valuesdestposid.SetSize(0);
        asp_x_coord=unique_x_coordinates.GetAt(loopCounter2-1);
        sql_statement = StrConcat4(Translate("SELECT * FROM [sheet1$] WHERE [asp_X_coord] = "), asp_x_coord, Translate(""), Translate(""));
        seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
        seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
        seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
        seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
        seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
        seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
        seq_sort2.AddField("volume", volume, hslString, 255);
        seq_sort2.AddField("volume2", volume2, hslString, 255);
        seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
        seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
        if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1$", hslRead, sql_statement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (seq_sort2.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == seq_sort2.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            arr_valuesLabID.AddAsLast(asp_labid);
            arr_valuesPosID.AddAsLast(asp_pos_id);
            arr_valuesycoord.AddAsLast(asp_y_coord);
            arr_valuesvol.AddAsLast(volume);
            arr_valuesvol2.AddAsLast(volume2);
            arr_valuesprocessed.AddAsLast(0);
            arr_valuespdestlabid.AddAsLast(disp_labid);
            arr_valuesdestposid.AddAsLast(disp_posid);
          }
        }
        {
          loopCounter6 = 0;
          while (1 == 1)
          {
            loopCounter6 = loopCounter6 + 1;
            lookup_return = Lookup(arr_valuesprocessed, 0);
            if (lookup_return == 0)
            {
              break;
            }
            Unique_y_coordinate = 10000000;
            LoopsNum=arr_valuesLabID.GetSize();
            {
              for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
              {
                loopCounter4 = loopCounter4 + 1;
                if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == 0)
                {
                  asp_y_coord=arr_valuesycoord.GetAt(loopCounter4-1);
                  deltaY = Unique_y_coordinate - asp_y_coord;
                  if (deltaY >= 9)
                  {
                    asp_labid=arr_valuesLabID.GetAt(loopCounter4-1);
                    asp_pos_id=arr_valuesPosID.GetAt(loopCounter4-1);
                    disp_labid=arr_valuespdestlabid.GetAt(loopCounter4-1);
                    disp_posid=arr_valuesdestposid.GetAt(loopCounter4-1);
                    volume=arr_valuesvol.GetAt(loopCounter4-1);
                    volume2=arr_valuesvol2.GetAt(loopCounter4-1);
                    SeqAdd(sequence_for_sorting, asp_labid, asp_pos_id);
                    SeqAdd(secondary_seq, disp_labid, disp_posid);
                    Unique_y_coordinate = asp_y_coord;
                    array_volume.AddAsLast(volume);
                    array_2.AddAsLast(volume2);
                    arr_valuesprocessed.SetAt(loopCounter4-1, 1);
                  }
                }
              }
            }
          }
        }
        if( 0 != seq_sort2.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        seq_sort2.RemoveFields();
      }
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
  }
} // library namespace
