 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "HSLAppsLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\InitWorkListLocation.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "VectorCustomDialogs\\VectorCustomDialogs.hsl" }
 namespace _Method { #include "AssignColorScheme\\ColorSchemeLibrary.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\NGSStarLoading.hs_" }
 namespace _Method { #include "Stack_Reducer\\StackReducer.hs_" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\Worklist\\Worklist.hs_" }
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Methods\\LSK109_MPH_OxfordNanopore_v0.9.2.res"
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\Tools\\Tools_Library.hs_" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\ARW_Global.hsl" }
sequence t_seqMlStarSequenceNotUsed;
sequence t_seqMIDI_OnMagnet;
sequence t_seqHSP_Pipette;
sequence t_trpHSP_ODTC;
sequence t_trpHSP_Pipette;
sequence t_trpHamiltonComfortLidODTC;
sequence t_trp_Stack1;
sequence t_trpHamiltonComfortLidStackParkPos;
sequence t_trp_Stack4;
sequence t_trpHSP_Pipette2;
sequence t_trpMIDI_Pipette;
sequence t_trpMIDI_OnMagnet;
sequence t_trpHSP_Waste;
sequence t_trpMIDI_Waste;
sequence t_seqMIDI_Pipette;
sequence t_seqHSP_Pipette2;
sequence t_trpHamiltonComfortLidWaste;
variable t_intHHS1_HSP1;
variable t_intHHS2_HSP2;
variable t_intHHS3_HSP3_MIDI3;
variable t_intHHS4_MIDI1;
variable t_intHHS5_MIDI2;
variable t_arrIndex1PositionIDs[];
variable t_arrIndex2PositionIDs[];
variable t_arrAdapterLigationPlatePositionIDs[];
variable t_blnODTCused;
variable t_blnSendEmails;
variable t_intRequiredNumberOf1000uLTipsM4;
variable t_intRequiredNumberOf300uLTipsM4;
variable t_intRequiredNumberOf50uLTipsM4;
variable t_strSerialNumberMLStar;
variable t_intSelectedIndexSTART;
variable t_intSelectedIndexSTOP;
variable t_strLocalIPAddressOfComputer;
variable t_strEmailAdress;
variable t_strDeviceAddressODTC;
variable t_intNumberOfSamplesFromFile;
variable t_intDeviceNumberODTC;
variable t_blnTestODTCWithShortDummyProtocol;
variable t_strODTCFolderXML;
variable t_blnShortenPreheat;
sequence t_seqHHS3_MIDI;
sequence t_trpHHS3_MIDI;
sequence t_trpHSP_OnMagnet;
sequence t_seqHSP_OnMagnet;
variable t_arrBlnProcessActivation[];
variable t_blnSkipLoadingRoutine;
sequence t_seqAspirate_EndPrepMastermix;
sequence t_seqAspirate_AMPureBeads;
sequence t_seqAspirate_Ethanol80;
sequence t_seq_IndexPlate_Pipette;
sequence t_trp_IndexPlate_Pipette;
variable t_intRequestIDForActiveProtocol;
variable t_intTimeForProtocol;
variable l_arrEndDialogListInformation[];
variable t_blnStoreHSPoverNightWithinODTC;
variable t_blnStoreAtRoomTemperature;
variable t_blnSimulationMode;
variable t_blnUseMPHInsteadOfChannels;
variable t_strFullPathReportFile;
sequence t_arrTipAdapters[];
variable t_blnReduceDeckTo4ChannelSystem;
sequence t_seqAspirate_NucleaseFreeWater;
sequence t_seqAspirate_ShortFragmentBuffer;
variable t_fltVolumeAMPureBeads01_Process11;
variable t_fltVolumeElutionBuffer_Process11;
variable t_fltVolumeDiscardSupernatant_M11;
variable t_intRequiredNumberOf50uLTipsM10;
variable t_intRequiredNumberOf300uLTipsM10;
variable t_intRequiredNumberOf1000uLTipsM10;
variable t_fltVolumeAdapterLigationMastermix_Process10;
variable t_fltVolumeAdapterLigationReaction_M11;
sequence t_seqAspirate_AdapterLigationMastermix;
sequence t_seqAspirate_ElutionBuffer;
variable t_fltVolumeEndPrepMasterMix_Process04;
variable t_intNumberOfTargetsFromFile;
sequence t_seqEndPrepSourceWells;
sequence t_seqEndPrepSourceTargetWells;
variable t_arrTargetWellPositions[];
variable t_arrSourceWellPositions[];
sequence t_seqTargetWellPositions_HHS3_MIDI;
sequence t_seqTargetWellPositions_HSP_Pipette;
sequence t_seqTargetWellPositions_MIDI_Pipette;
sequence t_seqTargetWellPositions_HSP_Pipette2;
sequence t_seqTargetWellPositions_MIDI_OnMagnet;
variable t_intRequiredNumberOf50uLTipsM11;
variable t_intRequiredNumberOf300uLTipsM11;
variable t_intRequiredNumberOf1000uLTipsM11;
sequence t_trpHHS2_HSP;
sequence t_trpHHS1_HSP;
sequence t_trpHSP_Pipette3;
sequence t_seqHSP_Pipette3;
sequence t_trp_StackOut;
sequence t_seqPoolSourceWells;
sequence t_seqTargetWellPositions_HSP_Pipette3;
sequence t_trp_StackOut_001;
variable t_fltVolumeEthanol70_Process05;
variable t_fltVolumeAMPureBeads01_Process05;
variable t_fltVolumeShortFragmentBuffer_2_Process11;
sequence t_seq_NativeIndexBarcodeTubes_Pipette;
variable t_intRequiredNumberOf300uLTipsM5;
variable t_intRequiredNumberOf50uLTipsM5;
variable t_intRequiredNumberOf1000uLTipsM5;
variable t_fltVolumeResuspensionBuffer_Process05;
variable t_fltVolumeDiscardSampleSupernatant_Process05;
variable t_fltVolumeEndPrepSample_Process05;
variable t_fltVolumeEndPrepSampleTransfer_Process05;
variable t_fltVolumeEndPrepCleanUpEluateTransfer_Process05;
variable t_fltVolumeEndPrepSampleMixing_Process05;
variable t_fltVolumeResuspensionBufferMixing_Process05;
sequence t_trpHHS4_MIDI;
variable t_blnNormalizeEndPrepInputSamples;
variable t_fltVolumeAMPureBeadsMixing;
sequence t_seqHHS4_MIDI;
sequence t_seqAspirate_AdapterMixII;
sequence t_trpHHS5_MIDI;
sequence t_seqHHS5_MIDI;
variable t_fltVolumeAdapterMixII_Process10;
variable t_fltVolumeFragmentBuffer_Process11;
variable t_fltVolumeSupernatantToWaste_Process11;
sequence t_seqAspirate_FragmentBuffer;
variable t_fltVolumeCleanEndPrepSamples_Process10;
variable t_fltVolumeEndPrepSampleMixing_Process05_LVFtips;
variable t_fltVolumeEndPrepSampleTransfer_Process05_2ndTransfer;
variable t_fltVolumeEndPrepSampleTransfer_Process05_1stTransfer;
variable t_fltVolumeEndPrepCleanUpEluateTransfer_Process05_1stTransfer;
variable t_fltVolumeEndPrepCleanUpEluateTransfer_Process05_2ndTransfer;
variable t_fltVolumeCleanEndPrepSamples_Process10_1stTransfer;
variable t_fltVolumeCleanEndPrepSamples_Process10_2ndTransfer;
variable t_fltVolumeAMPureBeadsMixing_Process05;
variable t_fltVolumeAdapterLigationMastermixMixing_Process10;
variable l_strDialogue;
global device ML_STAR ("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Methods\\LSK109_MPH_OxfordNanopore_v0.9.2.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable l_intCOREGripper(2); // Choose transport tool CORE Gripper to perform transport steps with CORE gripper instead of iswap. Value = 2
    private variable l_intISWAP(1); // Choose Transport tool iswap with a value of 1
    private variable l_strChannelPatternAbort;
    private variable l_intResultTipCheck;
    private variable l_intTransportTool;
    private variable l_retValueDialog;
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIP_PRESENT_CHECK_5ML_1ML::_InitLibrary();
    NGSSTARPREP::_InitLibrary();
    NGSSTARPROCESSES::_InitLibrary();
    COLORSCHEMELIBRARY::_InitLibrary();
    NGSSTARLOADING::_InitLibrary();
    STACKREDUCER::_InitLibrary();
    WORKLIST::_InitLibrary();
    TOOLS_LIBRARY::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    t_blnSkipLoadingRoutine = ASWGLOBAL::BOOL::FALSE;
    if(0){
      t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::TRUE;
    }
    INIT_WORKLIST_LOCATION::LockLibrary();
    t_blnSimulationMode = Util::GetSimulationMode();
    t_strSerialNumberMLStar = GetSerialNumber(ML_STAR);
    NGSSTARPREP::DATA_HandOverSimulationModeForAllLocalSMTs(t_blnSimulationMode, ASWGLOBAL::BOOL::FALSE);
    if(0){
      l_intTransportTool = l_intISWAP;
    }
    l_intTransportTool = l_intCOREGripper;
    t_strEmailAdress = Translate("Type in your email adress");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    if(0){
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    COLORSCHEMELIBRARY::Assign(0);
    VectorCustomDialogs::Initialize();
    VectorCustomDialogs::ShowStatusDialog(Translate("Oxford Nanopore LSK109"));
    VectorCustomDialogs::SetStatusText(Translate("Run Preparation..."));
    VectorCustomDialogs::SetStatusText(Translate("   Initializing Liquid Waste Sensor..."));
    if(0){
      NGSSTARPREP::LiquidWasteSensor_Init(1);
    }
    VectorCustomDialogs::SetStatusText(Translate("   Initializing Hamilton Heater Shakers (HHSs)..."));
    NGSSTARPREP::HHS_Init(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2, Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), ML_STAR);
    if(0){
      NGSSTARPREP::HHS_Init(t_intHHS3_HSP3_MIDI3, t_intHHS2_HSP2, t_intHHS1_HSP1, t_intHHS4_MIDI1, t_intHHS5_MIDI2, Translate("TCC"), Translate("0"), Translate("0"), Translate("0"), Translate("0"), ML_STAR);
    }
    VectorCustomDialogs::SetStatusText(Translate("   Initializing CPAC chiller..."));
    NGSSTARPREP::CPAC_Init();
    NGSSTARPREP::CPAC_SetTemperature(6);
    NGSSTARPREP::HHS_SetTemperature(t_intHHS1_HSP1, 0);
    NGSSTARPREP::HHS_SetTemperature(t_intHHS2_HSP2, 0);
    NGSSTARPREP::HHS_SetTemperature(t_intHHS3_HSP3_MIDI3, 0);
    NGSSTARPREP::HHS_SetTemperature(t_intHHS4_MIDI1, 0);
    NGSSTARPREP::HHS_SetTemperature(t_intHHS5_MIDI2, 0);
    t_blnODTCused = ASWGLOBAL::BOOL::TRUE;
    if(0){
    }
    t_blnTestODTCWithShortDummyProtocol = ASWGLOBAL::BOOL::FALSE;
    t_strDeviceAddressODTC = Translate("192.168.1.50");
    t_strLocalIPAddressOfComputer = Translate("192.168.1.51");
    if(0){
      t_strDeviceAddressODTC = "192.168.1.10";
      t_strLocalIPAddressOfComputer = "192.168.1.1";
      t_strDeviceAddressODTC = "192.168.1.10";
      t_strLocalIPAddressOfComputer = "192.168.1.2";
      t_strDeviceAddressODTC = Translate("169.254.120.232");
      t_strLocalIPAddressOfComputer = Translate("169.254.120.2");
      t_strDeviceAddressODTC = Translate("192.168.1.50");
      t_strLocalIPAddressOfComputer = Translate("192.168.1.2");
      t_strDeviceAddressODTC = "No ODTC used";
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_Init(t_strDeviceAddressODTC, t_intDeviceNumberODTC, t_strLocalIPAddressOfComputer);
    }
    NGSSTARLOADING::DATA_HandOverDataToSMT(t_strFullPathReportFile, 1, Translate("OxfordNanopore"), Translate("LSK109"));
    _SelectProcesses();
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_Init(t_strDeviceAddressODTC, t_intDeviceNumberODTC, t_strLocalIPAddressOfComputer);
    }
    MECC::TraceComment(Translate("ODTC INTIALISED"));
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      if (t_blnTestODTCWithShortDummyProtocol == ASWGLOBAL::BOOL::TRUE)
      {
        t_strODTCFolderXML = StrConcat2(Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Files\\ODTC_scripts"), Translate("\\LSK109_shortGINIT.xml"));
      }
      else
      {
        t_strODTCFolderXML = StrConcat2(Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Files\\ODTC_scripts"), Translate("\\LSK109_GINIT.xml"));
      }
      NGSSTARPREP::ODTC_DownloadProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML);
      NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
      if (t_intSelectedIndexSTART == 1)
      {
        MECC::TraceComment(Translate("Default settings for all processes 20°C block and 70°C lid"));
        NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("Init_20C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
        MECC::TraceComment(Translate("Exception settings for  proces 1 4°C block and 30°C lid"));
        if(0){
          NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("Init_4C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
        }
        MECC::TraceComment(Translate("Exception settings for  proces 4 20°C block and 110°C lid"));
        if(0){
          NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("Init_110C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
        }
      }
    }
    SeqRemoveAll(t_seqMlStarSequenceNotUsed);
    t_arrTipAdapters.SetSize(3);
    t_blnReduceDeckTo4ChannelSystem = ASWGLOBAL::BOOL::FALSE;
    NGSSTARPROCESSES::DATA_HandoverSequencesAndDataToSMT(ML_STAR, l_intTransportTool, Translate("Oxford Nanopore Tiling PCR LSK109 Library Prep"), ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, t_strEmailAdress, ASWGLOBAL::BOOL::TRUE, t_strFullPathReportFile, t_arrTipAdapters, 1);
    NGSSTARLOADING::DATA_HandOverDataToSMT(t_strFullPathReportFile, 1, Translate("OxfordNanopore"), Translate("LSK109"));
    VectorCustomDialogs::SetStatusText(Translate("   Resources required..."));
    _CalculateAndLoadConsumables();
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process01_cDNA_EndPrep();
    }
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process02_EndPrepCleanup();
    }
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process03_AdapterLigation();
    }
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process04_AdapterLigationCleanup();
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
    l_arrEndDialogListInformation.SetSize(0);
    l_arrEndDialogListInformation.AddAsLast(Translate("1) Check / empty the tip waste, "));
    l_arrEndDialogListInformation.AddAsLast(Translate("2) Check / empty the liquid waste container,"));
    l_arrEndDialogListInformation.AddAsLast(Translate("3) Remove and store reagents and created plates."));
    l_retValueDialog = VectorCustomDialogs::ListDialog(Translate("Method completed successfully."), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate(""), Translate("Do you want to unload the carrier?"), l_arrEndDialogListInformation);
    if (l_retValueDialog == ASWGLOBAL::DIALOG::YES)
    {
      VectorCustomDialogs::SetStatusText(Translate("Unloading the deck..."));
      MECC::TraceComment(Translate("***** Unload Carriers *****"));
      if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      else
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    if(0){
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    VectorCustomDialogs::SetStatusText(Translate("METHOD COMPLETE"));
    VectorCustomDialogs::SetStatusText(Translate("Preparing for run shutdown..."));
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::PIP_CleanUpTipAdapter(ML_STAR, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPROCESSES::PIP_DefragmentTipRacks(ML_STAR);
    }
    NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::HHS_Terminate(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2);
    if(0){
      NGSSTARPREP::CPAC_Terminate();
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_Terminate(t_intDeviceNumberODTC, ASWGLOBAL::BOOL::FALSE);
    }
    l_intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, l_strChannelPatternAbort, 8);
    if (l_intResultTipCheck == 1)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    VectorCustomDialogs::Terminate();
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("Workflow completed"), Translate("All selected processes have been completed successfully. Clean the deck and empty the liquid waste."));
    }
    TIP_PRESENT_CHECK_5ML_1ML::_ExitLibrary();
    NGSSTARPREP::_ExitLibrary();
    NGSSTARPROCESSES::_ExitLibrary();
    COLORSCHEMELIBRARY::_ExitLibrary();
    NGSSTARLOADING::_ExitLibrary();
    STACKREDUCER::_ExitLibrary();
    WORKLIST::_ExitLibrary();
    TOOLS_LIBRARY::_ExitLibrary();
  } }
