private function Process01_cDNA_EndPrep(  ) void ;
private function Process02_EndPrepCleanup(  ) void ;
private function Process03_AdapterLigation(  ) void ;
private function Process04_AdapterLigationCleanup(  ) void ;
private function ProcessX_StoreHSPWithinODTCOverNight( sequence & i_trpHSP, variable i_blnIncubateODTCWithoutActiveCooling ) void ;
private function _CalculateAndLoadConsumables(  ) void ;
private function _SelectProcesses(  ) void ;
private function _VersionHistory(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private variable l_strChannelPatternAbort;
  private variable l_intResultTipCheck;
  private variable l_retValueDialog;
  VectorCustomDialogs::SetStatusText(Translate("¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨METHOD ABORTED¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨"));
  if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_SendEmail(Translate("Method aborted"), Translate("Read report file and logfile. Clean the deck and empty the liquid waste."));
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_OpenDoor(t_strDeviceAddressODTC);
    NGSSTARPREP::ODTC_Terminate(t_intDeviceNumberODTC, ASWGLOBAL::BOOL::TRUE);
  }
  NGSSTARPROCESSES::PIP_CleanUpTipAdapter(ML_STAR, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  l_arrEndDialogListInformation.SetSize(0);
  l_arrEndDialogListInformation.AddAsLast(Translate("1) Check / empty the tip waste, "));
  l_arrEndDialogListInformation.AddAsLast(Translate("2) Check / empty the liquid waste container,"));
  l_arrEndDialogListInformation.AddAsLast(Translate("3) Remove and store reagents and created plates."));
  l_retValueDialog = VectorCustomDialogs::ListDialog(Translate("Method aborted."), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 60, Translate(""), Translate("Press OK to terminate all active devices and close the method."), l_arrEndDialogListInformation);
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  NGSSTARPREP::HHS_Terminate(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2);
  NGSSTARPREP::CPAC_Terminate();
  l_intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, l_strChannelPatternAbort, 8);
  if (l_intResultTipCheck == 1)
  {
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  if(0){
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  VectorCustomDialogs::Terminate();
}

private function _VersionHistory(  ) void {
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Oxford Nanopore LSK109\nBy:          Sean Collison, James Tichmarsh and Colin Herd, based on  - based on method written by , Stephan Grosch, Hamilton Bonaduz AG and Pascal Houtzager, Hamilton Germany GmbH, Martinsried, D\nDate:      March 23th, 2020\nVersion:  0.1\n\nBased on  Reference Guide (PTC_9096_v109_revD_06Feb2020)\n\nVersion Notes:\n\n0.1 Initial method\n\n\n\nVersioning : see at tab Version\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Oxford Nanopore LSK109\nBy:          Sean Collison, James Tichmarsh and Colin Herd, based on  - based on method written by , Stephan Grosch, Hamilton Bonaduz AG and Pascal Houtzager, Hamilton Germany GmbH, Martinsried, D\nDate:      March 23th, 2020\nVersion:  0.1.3\n\nBased on  Reference Guide (PTC_9096_v109_revD_06Feb2020)\n\nVersion Notes:\n\n1. Added cDNA Submethod from James Titchmarch\n2. Added Native Barcode Ligation Submethod from James Tichmarch\n2. Added ODTC files from James Titchmarch\n\n\nVersioning : see at tab Version\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Oxford Nanopore LSK109\nBy:          Sean Collison, James Tichmarsh and Colin Herd, based on  - based on method written by , Stephan Grosch, Hamilton Bonaduz AG and Pascal Houtzager, Hamilton Germany GmbH, Martinsried, D\nDate:      March 31st, 2020\nVersion:  0.1.5\n\nBased on  Reference Guide (PTC_9096_v109_revD_06Feb2020)\n\nVersion Notes:\n\n1. Added Pooling&Normalisation SubMethod Library\n2. Added Pooling&Normalisation submethods to _SelectProcesses for File Handling for Normalisation, Pooling, and Barcode allocation\n3. Disabled & added pipetting steps to use Volume Arrays and Sequences generated by the Pooling&Normalisation SubMethod Library\n\n\nVersioning : see at tab Version\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Oxford Nanopore LSK109\nBy:          Sean Collison, James Tichmarsh and Colin Herd  - based on method written by , Stephan Grosch, Hamilton Bonaduz AG and Pascal Houtzager, Hamilton Germany GmbH, Martinsried, D\nDate:      March 31st, 2020\nVersion:  0.1.6\n\nBased on  Reference Guide (PTC_9096_v109_revD_06Feb2020)\n\nVersion Notes:\n\n1. Significant changes made to PoolingAndNormalisation Sub Method Library\n2. Setting sequences in _CalulateAndLoadConsumables have been edited to use t_arrSourceWellPositions read from the worklist\n\nVersioning : see at tab Version\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Oxford Nanopore LSK109\nCreated By: Sean Collison, James Tichmarsh and Colin Herd, Hamilton UK Service & Sales Ltd.\nBased on FW method: Stephan Grosch, Hamilton Bonaduz AG\nDate:      March 31st, 2020\nVersion:  0.1.7\n\nBased on  Reference Guide (PTC_9096_v109_revD_06Feb2020)\n\nVersion Notes:\n\n1. Updated NGSStarProcesses to fix mixing issues in the cleanup steps and a submethod for pooling samples\n2. Added Process07_VolumebasedPooling now using arrays generated from PoolingandNormalisation SMT\n3. Added CalculateResources section for 07_VolumeBasedPooling\n\nVersioning : see at tab Version\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Oxford Nanopore LSK109_MPH\nCreated By: Sean Collison, Hamilton UK Service & Sales Ltd.\nBased on: Oxford Nanopore LSK109v1.7.9 Created By Jim Titchmarsh & Colin Herd, Hamilton UK Service & Sales Ltd.\nDate:      March 31st, 2020\nVersion:  0.4.0\n\nBased on  Reference Guide (Genomic DNA by Ligation (SQK--LSK109) , GDE_9062_v109_revQ_14Aug2019))\n\nVersion Notes:\n\n1. LSK109 method created from PCRTilingLSK109v.0.3.3_MPH\n2. _SelectProcesses edited for LSK109\n3. _Loading edited for LSK109\n4. Liquid classes, pipetting and procedure copied from LSK109_v1.7.9\n\nVersioning : see at tab Version\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Oxford Nanopore LSK109_MPH\nCreated By: Sean Collison, Hamilton UK Service & Sales Ltd.\nBased on: Oxford Nanopore LSK109v1.7.9 Created By Jim Titchmarsh & Colin Herd, Hamilton UK Service & Sales Ltd.\nDate:      March 31st, 2020\nVersion:  0.5.0\n\nBased on  Reference Guide (Genomic DNA by Ligation (SQK--LSK109) , GDE_9062_v109_revQ_14Aug2019))\n\nVersion Notes:\n\n1. Water-tested on NGS STAR for 16x Samples with MPH & ODTC\n\nVersioning : see at tab Version\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Oxford Nanopore LSK109_MPH\nCreated By: Sean Collison, Hamilton UK Service & Sales Ltd.\nBased on: Oxford Nanopore LSK109v1.7.9 Created By Jim Titchmarsh & Colin Herd, Hamilton UK Service & Sales Ltd.\nDate:      March 31st, 2020\nVersion:  0.6.0\n\nBased on  Reference Guide (Genomic DNA by Ligation (SQK--LSK109) , GDE_9062_v109_revQ_14Aug2019))\n\nVersion Notes:\n\n1. End Prep MM - Mixing now occurs before Aspiration to prevent any settling\n2. End Prep MM - Mixing on Dispense to samples increased - Previously 8uL 3 cycles, now 50uL x8 cycles\n3. EndPrep Clean Up - Increase Bead Trough Mixing cycles to 10. Decrease Dead volume to 500uL\n4. EndPrep Clean Up - Sample Transfer to Beads edited to use 2x50uL Tips instead of 300uL to improve complete sample transfer\n5. EndPrep Clean Up - Added quick shake on HHS after sample incubation of beads before moving to Magnet\n6. EndPrep Clean Up - Corrected sample supernatant removal to 120uL\n7. EndPrep Clean Up - Added quick shake before final incubation on magnet before elution tansfer\n8. EndPrep Clean Up - Changed Eluate transfer from MIDI on Magnet to HSP to use 2x 50uL Tips in stead of 300uL tips\n9. Adapter Ligation - Changed transfer of sample to MIDI to use 2x50uL Tips instead of 300uL tips\n10. Adapter Ligation - Added short shake after sample incubation with beads before placing on Magnet\n11. Adapter Ligation -  Added pre-mixing of SFB/LFB\n21. Adapter Ligation - Added short shake after eluate incubation before final incubation on magnet\n22. Adapter Ligation - Changed all magnet seperation incubations to 5mins\n23. End Prep Clean Up- Changed all magnet seperation incubations to 5mins\n24. Adapter Ligation - Changed sample incubation with eltuion to 10minutes\n25. Dead Volume of Water reduced from 7mL to 2mL, Ethanol reduced from 7mL to 3mL\n\nVersioning : see at tab Version\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Oxford Nanopore LSK109_MPH\nCreated By: Sean Collison, Hamilton UK Service & Sales Ltd.\nBased on: Oxford Nanopore LSK109v1.7.9 Created By Jim Titchmarsh & Colin Herd, Hamilton UK Service & Sales Ltd.\nDate:      May 7th, 2020\nVersion:  0.7.0\n\nBased on  Reference Guide (Genomic DNA by Ligation (SQK--LSK109) , GDE_9062_v109_revQ_14Aug2019))\n\nVersion Notes:\n\n1. UV dialogue disabled\n2. EndPrep - Changed MM PIP_Mix only step to use ON_LSK109_SVF_DNARepairAndEndPrepMasterMixMixing_SurfaceEmpty Liquid class\n3. EndPrep - Change MM PIP_Mix only step to use t_fltVolumeEndPrepMasterMix_Process04_MixingVolume instead of auto-detect\n4. Changed z-height of HSP_Pip2 from 211.300 to 211.500\n5. EndPrepCleanUp - Change PIP_mix beads to used t_fltVolumeAMPureBeadsMixing_Process05 instead of auto detect volume\n6. EndPrepCleanUp - MPH sample transfer from HSP to MIDI no longer ejects tips between transfer\n7. EndPrepCleanUp - Dispense of resuspension buffer now occurs after MIDI has been moved off magnet.\n8. EndPrepCleanUp - PIP_mix of beads changed to pipette from bottom\n9. EndPrepCleanUp - Asp of beads from trough changed to from bottom instead of cLLD. Dispense changed from 0.7 to15 to prevent splash from jet dispense.\n10. EndPrepCleanUp - MPH Eluate transfer from MIDI to HSP no longer ejects tips between transfer\n11. AdapterLigation - Added Adapter Ligation MM mixing\n12. AdapterLigationCleanUp - Set volume for Pip_mix for bead trough mixing\n13. AdapterLigationCleanUp - Sample transfer with MPH now uses 1 set of tips\n14. AdapterLigationCleanUp - Sample and Bead PIP mixing increased\n15. AdapterLigationCleanUp - SFB/LFB PIP_mix in troughbefore ASP now uses set volume\n16. AdapterLigationCleanUp - SB/LGB PIP_mix with beads increased\n\nVersioning : see at tab Version\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Oxford Nanopore LSK109_MPH\nCreated By: Sean Collison, Hamilton UK Service & Sales Ltd.\nBased on: Oxford Nanopore LSK109v1.7.9 Created By Jim Titchmarsh & Colin Herd, Hamilton UK Service & Sales Ltd.\nDate:      April 11th, 2020\nVersion:  0.8.0\n\nBased on  Reference Guide (Genomic DNA by Ligation (SQK--LSK109) , GDE_9062_v109_revQ_14Aug2019))\n\nVersion Notes:\n\n\n1. EndPrep - EndPrep MM dead volume increased from 20uL to 30uL\n2. EndPrepCleanUp- Changed ON_LSK109_HVF_AMPure_JetPart Disp and Stop flow rate from 300uL/s to 200uL/s\n3. Changed z-height of HSP_Pip2 from 211.500 to 211.400\n4. EndPrepCleanUp - Added PIP_Mixing of Samples of beads - OxN request: Important to mix entire volume of Samples + Beads\n5. EndPrepCleanUp - Edited Process_CleanUp_MPH_EndPrep Final PIP_MPHMixing of Elution buffer and beads to = volume of resuspension buffer for full volume mixing\n6. AdapterLigation - Reduced Adapter Ligation MM mix cycles\n7. AdapterLigation - Remove cLLD from Asp for samples transfer\n8. EndPrepCleanUp & AdapterLigation CleanUp - Changed all Sample & Bead and Elution & Bead PIP mixes to full volume mixing\n9. AdapterLigationCleanUp - Changed MPG mixing of beads & LFB to occur on PIP_Midi, and changed to full volume.\n10. AdapterLigationCleanUp - Changed Elution Buffer source allocation from Tube to Trough.\n11. NGSStarProcesses.smt - updated PIP_mix detect volume in container error - automatic detection should now work rather than mixing 0uL.\n\n\nVersioning : see at tab Version\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Oxford Nanopore LSK109_MPH\nCreated By: Sean Collison, Hamilton UK Service & Sales Ltd.\nBased on: Oxford Nanopore LSK109v1.7.9 Created By Jim Titchmarsh & Colin Herd, Hamilton UK Service & Sales Ltd.\nDate:      April 11th, 2020\nVersion:  0.9.0\nBased on  Reference Guide (Genomic DNA by Ligation (SQK--LSK109) , GDE_9062_v109_revQ_14Aug2019))\n\nVersion Notes:\n\n\n1. Associated .lay file changed to v0.6 - updated RGT50\n2. Edited CPAC sequences so EndPrepMM=Column1, AdapterLigationMM=Column2, AMX=Coulmn3\n3. Added If/Else statement to MM PIP_Mixonly commands depending on Number of samples (up to 48samples)\n4. Added If/Else statements to FragmentBuffer, to be loaded in 20mL or 50mL troughs dependent on number of samples.\n5. Updated NGSStarProcesses and NGSStarLoading smts\n6. Increased EndPrepMM DV from 30 to 40uL.\n7. Mixing after EndPrepMM distribution now uses MPH in a seperate MixingOnly step to mix samples with EndPrepMM\n8. Changed Bead Pre PIP_MixOnly step to now use automated volume\n9. Removed required MIDI for Adapter Ligation clean-up\n10. Increased Water dead volume\n11. Adapter Ligation clean up, correct PIP-mix on 1st FB wash occuring on HHS5 - now occurs on MIDI_pipette\n12. Adapter ligation cleanup, Move MIDI plate off magnet before adding elution buffer\n13. Adapter Ligation cleanup, Pipette mix of elution buffer and beads now uses \"ON_LSK109_50F_MPH_FinalResuspensionBuffer_JetEmpty\" instead of 300ul tips\n\nLiquid class changes:\n\n14. ON_LSK109_50F_DNARepairAndEndPrepMastermix - adjusted correction curve, added 12uL data point equal to 14uL. Increased Asp/Disp from 2uL to 3uL\n15. ON_LSK109_HVF_AMPure_JetPart - droplets observed on side of MIDI, decreased dispense speed and stop flow rate from 300uL/s  to  250uL/s\n16. ON_LSK109_MPH_50F_SampleForCleanUp_SurfaceEmpty - Some sample left in plate in some wells, Asp flow rate decreased from  100uL/s  to 75uL/s\n17. NGSStar_HVFT_EtOH_DispenseJet_Part - droplets forming - increased  StopSpeed from  250uL/s to 400uL/s. Increased Stop back volume from 5 to 10uL.\n18. ON_LSK109_50F_LigationReagentMasterMix_SurfaceEmpty - 10uL observed left in tip, 30uL dispense should be 35uL. Increased blowout volume on Asp/Disp from 2uL to 5uL\n19. ON_LSK109_50F_AdapterMixII_SurfaceEmpty - droplets accumulating near CPAC before transport ot Plate. Swapspeed on Asp increased from 2mm/s  to 5mm/s. Air transport volume currently 0uL\n20. ON_LSK109_50F_MPH_FinalResuspensionBuffer_SurfaceEmpty - Bead carry over observed - decreased flow rate from 30uL/s to 20uL/s  \n21. Created \"ON_LSK109_50F_MPH_FinalResuspensionBuffer_JetEmpty\" for mixing final elution\n\nVersioning : see at tab Version\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Oxford Nanopore LSK109_MPH\nCreated By: Sean Collison, Hamilton UK Service & Sales Ltd.\nBased on: Oxford Nanopore LSK109v1.7.9 Created By Jim Titchmarsh & Colin Herd, Hamilton UK Service & Sales Ltd.\nDate:      April 11th, 2020\nVersion:  0.9.3\nBased on  Reference Guide (Genomic DNA by Ligation (SQK--LSK109) , GDE_9062_v109_revQ_14Aug2019))\n\nVersion Notes:\n\n\n1. NGSStarLoading updated\n2. NGSStarProcesses updated to 2.5.3 changes\n3. Worklist.smt added and PoolingAndNormalisation smt removed\n4. Previously method contained 11 processes (from PCRTilingLSK109). Variable names refer to old process numbers. For Reference: Process1 = Process04, Process2 = Process05, Process3 = Process 10, Process4 = Process 11\n5. GUI set up for Water-run testing can be disabled in the _SelectProcesses tab\n6. v0.9.2.lay file associated with method from installed system.\n7. Logic for channels only set up, but NGSStarProcesses needs editing so that the Process steps are aligned with the comparitive MPH submethod which have been biological tested.\n\nLiquid class changes:\n\n\nVersioning : see at tab Version\n\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Oxford Nanopore LSK109_MPH\nCreated By: Sean Collison, Hamilton UK Service & Sales Ltd.\nModified By: Jade Bartolo, Oxford Nanopore Technologies\nBased on: Oxford Nanopore LSK109v1.7.9 Created By Jim Titchmarsh & Colin Herd, Hamilton UK Service & Sales Ltd.\nDate:      June 25th, 2020\nVersion:  0.9.5_JB\nBased on  Reference Guide (Genomic DNA by Ligation (SQK--LSK109) , GDE_9062_v109_revQ_14Aug2019))\n\nVersion Notes:\n\n1) Changed deal volume of master mixes from 40 ul to 20 ul\n2) Changed the order of reagents of mastermixes to match the order on the manual protocol\n3) Changed the names of the steps to match the order on the manual protocol\n4) Added change to accommodate for additional containers in NGSSTARLoading sub method library\n\nLiquid class changes:/\n\n\nVersioning : see at tab Version\n\n\n*************************************************************************************************************************************"));
}

private function _CalculateAndLoadConsumables(  ) void {
  private variable l_intStartPositionAspiration;
  private variable l_bln_Is_Tip50Carrier01_Loaded;
  private variable l_bln_Is_Tip1000Carrier01_Loaded;
  private variable l_bln_Is_Tip300Carrier01_Loaded;
  private variable l_intNumberOf50uLTips;
  private variable l_intNumberOfMIDIPlates;
  private variable l_intNumberOf1000uLTips;
  private variable l_intNumberOf300uLTips;
  private variable l_intNumberOfHSPPlates;
  private variable l_intNumberOfHamiltonComfortLids;
  private sequence l_arr_seqReagentsOn50mlContainers[];
  private variable l_arr_strReagentNamesOn50mlContainers[];
  private variable l_arr_fltReagentVolumesOn50mlContainers[];
  private variable l_intSizeArrReagentNames50mlTroughs;
  private variable l_intArrReagentNamesIndex;
  private variable l_blnReloadToRefillTroughsRequested;
  private variable loopCounter1;
  private variable l_strFullPathLoadingPicture;
  private sequence l_arr_seqReagentsOn20mlContainers[];
  private variable l_intSizeArrReagentNames20mlTroughs;
  private variable l_arr_strReagentNamesOn20mlContainers[];
  private variable l_arr_fltReagentVolumesOn20mlContainers[];
  private variable l_intArrayLookup;
  private variable l_strTargetWellID;
  private variable loopCounter5;
  private variable l_arrUniqueTargetWellIDs[];
  private dialog customDialog_1;
  private variable l_blnReturn;
  private variable l_strRGTCarrier;
  private sequence t_seqAspirate_Ethanol70;
  MECC::TraceComment(Translate("--------------- CalculateAndLoadConsumables"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Calculate and load consumables"), ASWGLOBAL::BOOL::YES);
  MECC::TraceComment(Translate("---------------------------------------------------------------------------\nProcess04_DNAEndPrep\n---------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltVolumeEndPrepMasterMix_Process04 = NGSSTARLOADING::Define_VolumePerWell(Translate("End Prep Mastermix"), 12.0);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("End Prep Mastermix"), Translate("NEBNext FFPE DNA Repair Buffer"), 3.5);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("End Prep Mastermix"), Translate("NEBNext FFPE DNA Repair Mix"), 2.0);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("End Prep Mastermix"), Translate("Ultra II End Prep Reaction Buffer"), 3.5);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("End Prep Mastermix"), Translate("Ultra II End Prep Enzyme Mix"), 3.0);
    l_intNumberOfMIDIPlates = 0;
    l_intNumberOfHamiltonComfortLids = 1;
    l_intNumberOf1000uLTips = 0;
    l_intNumberOf50uLTips = 2 * t_intNumberOfSamplesFromFile;
    if (t_intNumberOfSamplesFromFile >= 48)
    {
      l_intNumberOf300uLTips = 2;
    }
    else
    {
      l_intNumberOf300uLTips = 1;
    }
    t_intRequiredNumberOf50uLTipsM4 = l_intNumberOf50uLTips;
    t_intRequiredNumberOf300uLTipsM4 = l_intNumberOf300uLTips;
    t_intRequiredNumberOf1000uLTipsM4 = l_intNumberOf1000uLTips;
    NGSSTARLOADING::Add_TipsPlatesAndComfortlids_ToCurrentProcess(l_intNumberOfMIDIPlates, l_intNumberOfHSPPlates, l_intNumberOfHamiltonComfortLids, l_intNumberOf1000uLTips, l_intNumberOf300uLTips, l_intNumberOf50uLTips);
    if (t_blnNormalizeEndPrepInputSamples == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::Add_InputPlate_LoadingPositionOnDeck_ToCurrentProcess(Translate("48uL Input DNA Samples (100-200fmol)"), ML_STAR.HSP_Pipette3, ML_STAR);
    }
    else
    {
      NGSSTARLOADING::Add_InputPlate_LoadingPositionOnDeck_ToCurrentProcess(Translate("48uL Input DNA Samples (100-200fmol)"), ML_STAR.HSP_Pipette2, ML_STAR);
    }
  }
  MECC::TraceComment(Translate("---------------------------------------------------------------------------\nProcess05_EndPrepCleanup\n---------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltVolumeAMPureBeads01_Process05 = NGSSTARLOADING::Define_VolumePerWell(Translate("AMPure Beads"), 60);
    t_fltVolumeResuspensionBuffer_Process05 = NGSSTARLOADING::Define_VolumePerWell(Translate("Nuclease Free Water"), 62);
    t_fltVolumeEthanol70_Process05 = NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 200);
    t_fltVolumeEthanol70_Process05 = NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 200);
    t_fltVolumeEndPrepSample_Process05 = 60;
    t_fltVolumeEndPrepSampleTransfer_Process05 = 65;
    t_fltVolumeEndPrepSampleMixing_Process05 = t_fltVolumeEndPrepSample_Process05 * 1.6;
    t_fltVolumeEndPrepSampleTransfer_Process05 = 65;
    t_fltVolumeEndPrepSampleTransfer_Process05_1stTransfer = 30;
    t_fltVolumeEndPrepSampleTransfer_Process05_2ndTransfer = 35;
    t_fltVolumeEndPrepSampleMixing_Process05_LVFtips = 40;
    t_fltVolumeDiscardSampleSupernatant_Process05 = 130;
    t_fltVolumeEndPrepCleanUpEluateTransfer_Process05 = 81;
    t_fltVolumeEndPrepCleanUpEluateTransfer_Process05_1stTransfer = 30;
    t_fltVolumeEndPrepCleanUpEluateTransfer_Process05_2ndTransfer = 35;
    t_fltVolumeResuspensionBufferMixing_Process05 = t_fltVolumeResuspensionBuffer_Process05 * 0.8;
    t_fltVolumeAMPureBeadsMixing_Process05 = t_fltVolumeAMPureBeads01_Process05 * t_intNumberOfSamplesFromFile;
    t_fltVolumeAMPureBeadsMixing_Process05 = t_fltVolumeAMPureBeadsMixing_Process05 + 500;
    t_fltVolumeAMPureBeadsMixing_Process05 = t_fltVolumeAMPureBeadsMixing_Process05 / (8 * 1.0);
    if (t_fltVolumeAMPureBeadsMixing_Process05 > 1000)
    {
      t_fltVolumeAMPureBeadsMixing_Process05 = 800;
    }
    if (t_fltVolumeAMPureBeadsMixing_Process05 < 100)
    {
      t_fltVolumeAMPureBeadsMixing_Process05 = 100;
    }
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_NONE);
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("t_fltVolumeAMPureBeads01_Process05 : "), t_fltVolumeAMPureBeads01_Process05);
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("t_fltVolumeAMPureBeadsMixing : "), t_fltVolumeAMPureBeadsMixing);
    t_fltVolumeAMPureBeadsMixing = t_fltVolumeAMPureBeadsMixing / 8;
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("t_fltVolumeAMPureBeadsMixing : "), t_fltVolumeAMPureBeadsMixing);
    if (t_fltVolumeAMPureBeadsMixing > 800)
    {
      t_fltVolumeAMPureBeadsMixing = 800;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("t_fltVolumeAMPureBeadsMixing : "), t_fltVolumeAMPureBeadsMixing);
    if (t_fltVolumeAMPureBeadsMixing < 100)
    {
      t_fltVolumeAMPureBeadsMixing = 100;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("t_fltVolumeAMPureBeadsMixing : "), t_fltVolumeAMPureBeadsMixing);
    l_intNumberOfMIDIPlates = 1;
    l_intNumberOfHSPPlates = 1;
    l_intNumberOfHamiltonComfortLids = 0;
    l_intNumberOf1000uLTips = 32;
    l_intNumberOf300uLTips = 4 * t_intNumberOfSamplesFromFile;
    l_intNumberOf300uLTips = l_intNumberOf300uLTips + 104;
    l_intNumberOf50uLTips = 2 * t_intNumberOfSamplesFromFile;
    t_intRequiredNumberOf50uLTipsM5 = l_intNumberOf50uLTips;
    t_intRequiredNumberOf300uLTipsM5 = l_intNumberOf300uLTips;
    t_intRequiredNumberOf1000uLTipsM5 = l_intNumberOf1000uLTips;
    NGSSTARLOADING::Add_TipsPlatesAndComfortlids_ToCurrentProcess(l_intNumberOfMIDIPlates, l_intNumberOfHSPPlates, l_intNumberOfHamiltonComfortLids, l_intNumberOf1000uLTips, l_intNumberOf300uLTips, l_intNumberOf50uLTips);
    if (g_arr_blnActivationProcessStatus.ElementAt( 1 -1) == ASWGLOBAL::BOOL::FALSE)
    {
      NGSSTARLOADING::Add_InputPlate_LoadingPositionOnDeck_ToCurrentProcess(Translate("End Repair and End Prep plate"), ML_STAR.HSP_Pipette2, ML_STAR);
    }
  }
  MECC::TraceComment(Translate("---------------------------------------------------------------------------\nProcess10_AdapterLigation\n---------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltVolumeAdapterLigationMastermix_Process10 = NGSSTARLOADING::Define_VolumePerWell(Translate("Adapter Ligation Mastermix"), 40);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Adapter Ligation Mastermix"), Translate("Adapter Mix (AMX)"), 5);
    if(0){
      t_fltVolumeAdapterMixII_Process10 = NGSSTARLOADING::Define_VolumePerWell(Translate("Adapter Mix (AMX)"), 5);
      t_fltVolumeAdapterLigationMastermix_Process10 = NGSSTARLOADING::Define_VolumePerWell(Translate("Adapter Ligation Mastermix"), 35);
    }
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Adapter Ligation Mastermix"), Translate("Ligation Buffer (LNB)"), 25);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Adapter Ligation Mastermix"), Translate("Quick T4 DNA Ligase"), 10);
    t_fltVolumeAdapterLigationMastermixMixing_Process10 = t_fltVolumeAdapterLigationMastermix_Process10 * t_intNumberOfSamplesFromFile;
    if (t_fltVolumeAdapterLigationMastermixMixing_Process10 > 280)
    {
      t_fltVolumeAdapterLigationMastermixMixing_Process10 = 280;
    }
    l_intNumberOfMIDIPlates = 1;
    l_intNumberOfHSPPlates = 0;
    l_intNumberOfHamiltonComfortLids = 0;
    l_intNumberOf1000uLTips = 0;
    l_intNumberOf50uLTips = 3 * t_intNumberOfSamplesFromFile;
    if (t_intNumberOfSamplesFromFile >= 88)
    {
      l_intNumberOf300uLTips = 5;
    }
    else
    {
      if (t_intNumberOfSamplesFromFile >= 48)
      {
        l_intNumberOf300uLTips = 4;
      }
      else
      {
        l_intNumberOf300uLTips = 2;
      }
    }
    t_intRequiredNumberOf50uLTipsM10 = l_intNumberOf50uLTips;
    t_intRequiredNumberOf300uLTipsM10 = l_intNumberOf300uLTips;
    t_intRequiredNumberOf1000uLTipsM10 = l_intNumberOf1000uLTips;
    NGSSTARLOADING::Add_TipsPlatesAndComfortlids_ToCurrentProcess(l_intNumberOfMIDIPlates, l_intNumberOfHSPPlates, l_intNumberOfHamiltonComfortLids, l_intNumberOf1000uLTips, l_intNumberOf300uLTips, l_intNumberOf50uLTips);
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::FALSE)
    {
      NGSSTARLOADING::Add_InputPlate_LoadingPositionOnDeck_ToCurrentProcess(Translate("Clean End Prep Plate containing at minimum of 60uL"), ML_STAR.HSP_Pipette2, ML_STAR);
    }
    t_fltVolumeCleanEndPrepSamples_Process10 = 60;
    t_fltVolumeCleanEndPrepSamples_Process10_1stTransfer = 35;
    t_fltVolumeCleanEndPrepSamples_Process10_2ndTransfer = 35;
  }
  MECC::TraceComment(Translate("---------------------------------------------------------------------------\nProcess11_AdapterLigationCleanup\n---------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltVolumeAMPureBeads01_Process11 = NGSSTARLOADING::Define_VolumePerWell(Translate("AMPure Beads"), 40);
    t_fltVolumeFragmentBuffer_Process11 = NGSSTARLOADING::Define_VolumePerWell(Translate("Long Fragment Buffer"), 250);
    t_fltVolumeFragmentBuffer_Process11 = NGSSTARLOADING::Define_VolumePerWell(Translate("Long Fragment Buffer"), 250);
    if(0){
      t_fltVolumeShortFragmentBuffer_2_Process11 = NGSSTARLOADING::Define_VolumePerWell(Translate("Short Fragment Buffer"), 125);
      t_fltVolumeShortFragmentBuffer_2_Process11 = NGSSTARLOADING::Define_VolumePerWell(Translate("Short Fragment Buffer"), 125);
    }
    t_fltVolumeElutionBuffer_Process11 = NGSSTARLOADING::Define_VolumePerWell(Translate("Elution Buffer"), 25);
    t_fltVolumeSupernatantToWaste_Process11 = 165;
    l_intNumberOfMIDIPlates = 0;
    l_intNumberOfHSPPlates = 1;
    l_intNumberOfHamiltonComfortLids = 0;
    l_intNumberOf1000uLTips = 32;
    l_intNumberOf50uLTips = 2 * t_intNumberOfSamplesFromFile;
    l_intNumberOf300uLTips = 6 * t_intNumberOfSamplesFromFile;
    l_intNumberOf300uLTips = l_intNumberOf300uLTips + 104;
    t_intRequiredNumberOf50uLTipsM11 = l_intNumberOf50uLTips;
    t_intRequiredNumberOf300uLTipsM11 = l_intNumberOf300uLTips;
    t_intRequiredNumberOf1000uLTipsM11 = l_intNumberOf1000uLTips;
    NGSSTARLOADING::Add_TipsPlatesAndComfortlids_ToCurrentProcess(l_intNumberOfMIDIPlates, l_intNumberOfHSPPlates, l_intNumberOfHamiltonComfortLids, l_intNumberOf1000uLTips, l_intNumberOf300uLTips, l_intNumberOf50uLTips);
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::FALSE)
    {
      NGSSTARLOADING::Add_InputPlate_LoadingPositionOnDeck_ToCurrentProcess(Translate("Adapter Ligation Plate"), ML_STAR.MIDI_Pipette, ML_STAR);
    }
    t_fltVolumeAdapterLigationReaction_M11 = 50;
    t_fltVolumeDiscardSupernatant_M11 = 70;
  }
  MECC::TraceComment(Translate("------------------------------------------------------------------------------------------\nReagent Checks\n------------------------------------------------------------------------------------------"));
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Ethanol 80%"), ARW_Global::ReagentType::Reagent, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 60000, 5000, 0.2, ML_STAR.RGT50, 1, 0, t_seqAspirate_Ethanol80);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Nuclease Free Water"), ARW_Global::ReagentType::Reagent, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 60000, 5000, 0.7, ML_STAR.RGT50, 8, 0, t_seqAspirate_NucleaseFreeWater);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("AMPure Beads"), ARW_Global::ReagentType::Reagent, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::RocheTrough20mL, 20000, 2000, 0.2, ML_STAR.RGT20, 2, 0, t_seqAspirate_AMPureBeads);
  if(0){
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Short Fragment Buffer"), ARW_Global::ReagentType::Reagent, t_intNumberOfTargetsFromFile, ARW_Global::LabwareType::RocheTrough20mL, 20000, 1000, 0.1, ML_STAR.RGT20, 1, 0, t_seqAspirate_ShortFragmentBuffer);
  }
  if (t_intNumberOfSamplesFromFile >= 48)
  {
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Long Fragment Buffer"), ARW_Global::ReagentType::Reagent, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 65000, 2000, 0.2, ML_STAR.RGT50, 7, 0, t_seqAspirate_FragmentBuffer);
  }
  else
  {
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Long Fragment Buffer"), ARW_Global::ReagentType::Reagent, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::RocheTrough20mL, 20000, 2000, 0.2, ML_STAR.RGT20, 1, 0, t_seqAspirate_FragmentBuffer);
  }
  if (t_intNumberOfSamplesFromFile >= 48)
  {
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("End Prep Mastermix"), ARW_Global::ReagentType::Mastermix, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 800, 20, 0.2, ML_STAR.CPACTubeAdapter_Column1, 0, 2, t_seqAspirate_EndPrepMastermix);
  }
  else
  {
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("End Prep Mastermix"), ARW_Global::ReagentType::Mastermix, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 800, 20, 0.2, ML_STAR.CPACTubeAdapter_Column1, 0, 1, t_seqAspirate_EndPrepMastermix);
  }
  if(0){
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("AMPure Beads"), ARW_Global::ReagentType::Reagent, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::RocheTrough20mL, 20000, 1000, 0.1, ML_STAR.RGT20, 2, 0, t_seqAspirate_AMPureBeads);
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Ethanol 70%"), ARW_Global::ReagentType::Reagent, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 50000, 7000, 0.1, ML_STAR.RGT50, 1, 0, t_seqAspirate_Ethanol70);
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Nuclease Free Water"), ARW_Global::ReagentType::Reagent, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 50000, 7000, 0.1, ML_STAR.RGT50, 8, 0, t_seqAspirate_NucleaseFreeWater);
  }
  if (t_intNumberOfSamplesFromFile >= 88)
  {
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Adapter Ligation Mastermix"), ARW_Global::ReagentType::Mastermix, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 20, 0.15, ML_STAR.CPACTubeAdapter_Column2, 0, 3, t_seqAspirate_AdapterLigationMastermix);
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Adapter Mix (AMX)"), ARW_Global::ReagentType::Reagent, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 400, 20, 0.15, ML_STAR.CPACTubeAdapter_Column3, 0, 2, t_seqAspirate_AdapterMixII);
  }
  else
  {
    if (t_intNumberOfSamplesFromFile >= 48)
    {
      NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Adapter Ligation Mastermix"), ARW_Global::ReagentType::Mastermix, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 20, 0.15, ML_STAR.CPACTubeAdapter_Column2, 0, 2, t_seqAspirate_AdapterLigationMastermix);
      NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Adapter Mix (AMX)"), ARW_Global::ReagentType::Reagent, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 400, 20, 0.15, ML_STAR.CPACTubeAdapter_Column3, 0, 2, t_seqAspirate_AdapterMixII);
    }
    else
    {
      NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Adapter Ligation Mastermix"), ARW_Global::ReagentType::Mastermix, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 20, 0.15, ML_STAR.CPACTubeAdapter_Column2, 0, 1, t_seqAspirate_AdapterLigationMastermix);
      NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Adapter Mix (AMX)"), ARW_Global::ReagentType::Reagent, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 400, 20, 0.15, ML_STAR.CPACTubeAdapter_Column3, 0, 1, t_seqAspirate_AdapterMixII);
    }
  }
  if(0){
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Adapter Ligation Mastermix"), ARW_Global::ReagentType::Reagent, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 40, 0.1, ML_STAR.CPACTubeAdapter, 0, 1, t_seqAspirate_AdapterLigationMastermix);
  }
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Elution Buffer"), ARW_Global::ReagentType::Reagent, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 60000, 3500, 0.2, ML_STAR.RGT50, 6, 0, t_seqAspirate_ElutionBuffer);
  if(0){
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Elution Buffer"), ARW_Global::ReagentType::Reagent, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 40, 0.1, ML_STAR.SMP_CAR_32_A00, 25, 1, t_seqAspirate_ElutionBuffer);
  }
  NGSSTARLOADING::Display_Mastermix_Dialog();
  NGSSTARLOADING::Evaluate_ResourcesByCarrier(ML_STAR);
  NGSSTARLOADING::Retrieve_50mlTrough_ReagentsVolumesAndSequences(l_arr_strReagentNamesOn50mlContainers, l_arr_fltReagentVolumesOn50mlContainers, l_arr_seqReagentsOn50mlContainers);
  NGSSTARLOADING::Retrieve_20mlTrough_ReagentsVolumesAndSequences(l_arr_strReagentNamesOn20mlContainers, l_arr_fltReagentVolumesOn20mlContainers, l_arr_seqReagentsOn20mlContainers);
  l_intSizeArrReagentNames50mlTroughs=l_arr_strReagentNamesOn50mlContainers.GetSize();
  l_intSizeArrReagentNames20mlTroughs=l_arr_strReagentNamesOn20mlContainers.GetSize();
  TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("l_intSizeArrReagentNames20mlTroughs: "), l_intSizeArrReagentNames20mlTroughs);
  {
    for(l_intArrReagentNamesIndex = 0; l_intArrReagentNamesIndex < l_intSizeArrReagentNames50mlTroughs;)
    {
      l_intArrReagentNamesIndex = l_intArrReagentNamesIndex + 1;
      Util2::Debug::TraceSequence(l_arr_seqReagentsOn50mlContainers.ElementAt( l_intArrReagentNamesIndex -1));
    }
  }
  {
    for(l_intArrReagentNamesIndex = 0; l_intArrReagentNamesIndex < l_intSizeArrReagentNames20mlTroughs;)
    {
      l_intArrReagentNamesIndex = l_intArrReagentNamesIndex + 1;
      Util2::Debug::TraceSequence(l_arr_seqReagentsOn20mlContainers.ElementAt( l_intArrReagentNamesIndex -1));
    }
  }
  l_intStartPositionAspiration = 1;
  if(0){
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrIndex2PositionIDs, t_seq_IndexPlate_Pipette, 1);
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrIndex2PositionIDs, t_trp_IndexPlate_Pipette, 2);
  }
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.RGT_NativeBarcodeTubes, t_arrIndex1PositionIDs, t_seq_NativeIndexBarcodeTubes_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_ODTC, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_ODTC, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrSourceWellPositions, t_seqHSP_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette3, t_arrSourceWellPositions, t_seqHSP_Pipette3, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Pipette, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette3, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Pipette3, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arrSourceWellPositions, t_seqHSP_Pipette2, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Pipette2, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_OnMagnet, t_arrSourceWellPositions, t_seqHSP_OnMagnet, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_OnMagnet, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Waste, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.Ham_ComfortLid_ODTC, t_arrAdapterLigationPlatePositionIDs, t_trpHamiltonComfortLidODTC, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.Ham_ComfortLid_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpHamiltonComfortLidWaste, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arrSourceWellPositions, t_seqMIDI_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arrSourceWellPositions, t_trpMIDI_Pipette, 2);
  if(0){
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_Pipette, 2);
  }
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_OnMagnet, t_arrSourceWellPositions, t_seqMIDI_OnMagnet, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_OnMagnet, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_Waste, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrSourceWellPositions, t_seqHHS3_MIDI, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS4_MIDI, t_arrSourceWellPositions, t_seqHHS4_MIDI, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS5_MIDI, t_arrSourceWellPositions, t_seqHHS5_MIDI, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_trpHHS3_MIDI, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS4_MIDI, t_arrAdapterLigationPlatePositionIDs, t_trpHHS4_MIDI, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS5_MIDI, t_arrAdapterLigationPlatePositionIDs, t_trpHHS5_MIDI, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS2_HSP, t_arrAdapterLigationPlatePositionIDs, t_trpHHS2_HSP, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS1_HSP, t_arrAdapterLigationPlatePositionIDs, t_trpHHS1_HSP, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.Stack1, t_arrAdapterLigationPlatePositionIDs, t_trp_Stack1, 2);
  t_trp_StackOut.SetCurrentPosition(1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_StackOut_0001, t_arrAdapterLigationPlatePositionIDs, t_trp_StackOut_001, 2);
  if(0){
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate(" t_arrTargetWellPositions = "), t_arrTargetWellPositions);
    l_arrUniqueTargetWellIDs.SetSize(0);
    {
      for(loopCounter5 = 0; loopCounter5 < t_intNumberOfSamplesFromFile;)
      {
        loopCounter5 = loopCounter5 + 1;
        l_strTargetWellID=t_arrTargetWellPositions.GetAt(loopCounter5-1);
        l_blnReturn = APPSLIB::ArrayLookup(l_arrUniqueTargetWellIDs, l_strTargetWellID, l_intArrayLookup);
        if (l_blnReturn == ASWGLOBAL::BOOL::FALSE)
        {
          l_arrUniqueTargetWellIDs.AddAsLast(l_strTargetWellID);
        }
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate(" l_arrUniqueTargetWellIDs = "), l_arrUniqueTargetWellIDs);
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("t_arrTargetWellPositions= "), t_arrTargetWellPositions);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arrTargetWellPositions, t_seqTargetWellPositions_MIDI_Pipette, 1);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTargetWellPositions_MIDI_Pipette);
  if(0){
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
  }
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrTargetWellPositions, t_seqTargetWellPositions_HSP_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arrTargetWellPositions, t_seqTargetWellPositions_HSP_Pipette2, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette3, t_arrTargetWellPositions, t_seqTargetWellPositions_HSP_Pipette3, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrTargetWellPositions, t_seqTargetWellPositions_HHS3_MIDI, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_OnMagnet, t_arrTargetWellPositions, t_seqTargetWellPositions_MIDI_OnMagnet, 1);
  SeqRemoveAll(t_trp_Stack1);
  SeqRemoveAll(t_trp_StackOut);
  SeqRemoveAll(t_trp_Stack4);
  SeqRemoveAll(t_trpHamiltonComfortLidStackParkPos);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfMIDI, ML_STAR.Stack1, t_trp_Stack1, 3, ML_STAR);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfHSP, ML_STAR.Stack4, t_trp_Stack4, 4, ML_STAR);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfHSP, ML_STAR.Stack3, t_trp_StackOut, 2, ML_STAR);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfComfortLid, ML_STAR.Ham_ComfortLid_Stack_ParkPos, t_trpHamiltonComfortLidStackParkPos, 4, ML_STAR);
  l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\ODTCHamiltonComforlidPosition.png");
  if(0){
    l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\ODTCHamiltonComforlidPosition.jpg");
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::ODTC, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, l_strFullPathLoadingPicture);
  l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\PlateStackerCarrier.png");
  if(0){
    l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\PlateStackerCarrier.jpg");
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::PLT_Stack, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, l_strFullPathLoadingPicture);
  l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\Tip50ulFilterCarriers.png");
  if(0){
    l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\Tip50ulFilterCarriers.jpg");
  }
  l_bln_Is_Tip50Carrier01_Loaded = NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::TIP50_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, Translate(""));
  Trace ("l_bln_Is_Tip50Carrier01_Loaded : ",l_bln_Is_Tip50Carrier01_Loaded);
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::TIP50_02, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, l_strFullPathLoadingPicture);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, g_int_TotalNumberOf50Tips, g_int_TotalNumberOf300Tips, g_int_TotalNumberOf1000Tips, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
  NGSSTARLOADING::Load_TipCarrierOnly(ML_STAR, ARW_Global::CarrierType::TIP50_01, t_blnSkipLoadingRoutine);
  NGSSTARLOADING::Load_TipCarrierOnly(ML_STAR, ARW_Global::CarrierType::TIP50_02, t_blnSkipLoadingRoutine);
  if (l_bln_Is_Tip50Carrier01_Loaded == ASWGLOBAL::BOOL::TRUE)
  {
  }
  l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\Tip300ulFilterCarriers.png");
  if(0){
    l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\Tip300ulFilterCarriers.jpg");
  }
  l_bln_Is_Tip300Carrier01_Loaded = NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::TIP300_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, Translate(""));
  Trace ("l_bln_Is_Tip300Carrier01_Loaded : ",l_bln_Is_Tip300Carrier01_Loaded);
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::TIP300_02, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, l_strFullPathLoadingPicture);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, g_int_TotalNumberOf50Tips, g_int_TotalNumberOf300Tips, g_int_TotalNumberOf1000Tips, 2, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
  NGSSTARLOADING::Load_TipCarrierOnly(ML_STAR, ARW_Global::CarrierType::TIP300_01, t_blnSkipLoadingRoutine);
  NGSSTARLOADING::Load_TipCarrierOnly(ML_STAR, ARW_Global::CarrierType::TIP300_02, t_blnSkipLoadingRoutine);
  if (l_bln_Is_Tip300Carrier01_Loaded == ASWGLOBAL::BOOL::TRUE)
  {
  }
  l_blnReloadToRefillTroughsRequested = ASWGLOBAL::BOOL::FALSE;
  {
    loopCounter1 = 0;
    while (1 == 1)
    {
      loopCounter1 = loopCounter1 + 1;
      l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\ReagentContainerCarrier1.png");
      if(0){
        l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\ReagentContainerCarrier1.jpg");
        l_strRGTCarrier = Translate("RR204173");
      }
      NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::RGT1, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, l_strFullPathLoadingPicture);
      if(0){
        NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::RGT1, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, l_strFullPathLoadingPicture);
      }
      l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\ReagentContainerCarrier2.png");
      if(0){
        l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\ReagentContainerCarrier2.jpg");
        l_strRGTCarrier = Translate("RR204174");
        NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::RGT2, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, l_strFullPathLoadingPicture);
        NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::RGT2, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, l_strFullPathLoadingPicture);
      }
      if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::FALSE)
      {
        NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::RGT2, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\ReagentContainerCarrier2.jpg"));
      }
      if(0){
        NGSSTARPROCESSES::PIP_CheckForSufficientVolumeIn50mlTroughs(ML_STAR, l_arr_strReagentNamesOn50mlContainers, l_arr_fltReagentVolumesOn50mlContainers, l_arr_seqReagentsOn50mlContainers, l_blnReloadToRefillTroughsRequested);
        NGSSTARPROCESSES::PIP_CheckForSufficientVolumeIn20mlTroughs(ML_STAR, l_arr_strReagentNamesOn20mlContainers, l_arr_fltReagentVolumesOn20mlContainers, l_arr_seqReagentsOn20mlContainers, l_blnReloadToRefillTroughsRequested);
      }
      if (l_blnReloadToRefillTroughsRequested == ASWGLOBAL::BOOL::FALSE)
      {
        break;
      }
    }
  }
  l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\24TubesVialCarrier.jpg");
  if(0){
    l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\24TubesVialCarrier.jpg");
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Tube_Carrier24, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, l_strFullPathLoadingPicture);
  l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\32TubesVialCarrier1.jpg");
  if(0){
    l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\32TubesVialCarrier1.jpg");
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Vial_Carrier32_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, l_strFullPathLoadingPicture);
  if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\32TubesVialCarrier2.png");
    if(0){
      l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\32TubesVialCarrier2.jpg");
      NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Vial_Carrier32_02, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, l_strFullPathLoadingPicture);
    }
  }
  l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\MFX_CAR_2TipBC_DWP_PCR96_DWP_NestRB_0001.png");
  if(0){
    l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\PlateTipCarrier.jpg");
  }
  l_bln_Is_Tip1000Carrier01_Loaded = NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::PLT_TIP1000, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, l_strFullPathLoadingPicture);
  if (l_bln_Is_Tip1000Carrier01_Loaded == ASWGLOBAL::BOOL::TRUE)
  {
    if (g_int_TotalNumberOf1000Tips != 0)
    {
      NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, g_int_TotalNumberOf50Tips, g_int_TotalNumberOf300Tips, g_int_TotalNumberOf1000Tips, 3, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
      NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
    }
  }
  l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\MFX_CAR_2HHS30NuncDWP_Empty_PCR96_0001.png");
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::PLT_HHS, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, l_strFullPathLoadingPicture);
  l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\CPACCarrier.png");
  if(0){
    l_strFullPathLoadingPicture = Translate("C:\\Program Files (x86)\\HAMILTON\\ClinicalNGSStarlet\\OxfordNanopore\\LSK109\\Library\\NGSStarLoading\\CPACCarrier.jpg");
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::CPAC, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, l_strFullPathLoadingPicture);
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  if(0){
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  VectorCustomDialogs::MessageDialog(Translate("Deck loaded"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("The deck is finished loading for the next process.\nClick OK to continue with the method."));
}

private function _SelectProcesses(  ) void {
  private variable l_strFileInputWorklist;
  private variable l_arr_strProcessID[];
  private variable l_intLengthEmailAddress;
  private variable l_int_OptionSelected;
  private variable l_ODTCUsedUserPrompt;
  private sequence t_seqPoolTargetWells;
  private variable l_blnTestODTCWithShortDummyProtocolUserPrompt;
  private variable l_blnMPHUsedUserPrompt;
  l_arr_strProcessID.SetSize(0);
  l_arr_strProcessID.AddAsLast("Process01: DNA repair and end-prep");
  l_arr_strProcessID.AddAsLast(Translate("Process02: DNA repair and end-prep clean-up"));
  l_arr_strProcessID.AddAsLast(Translate("Process03: Adapter ligation"));
  l_arr_strProcessID.AddAsLast(Translate("Process04: Adapter ligation clean-up"));
  NGSSTARLOADING::Display_SelectProcesses_Dialog(l_arr_strProcessID, t_intSelectedIndexSTART, t_intSelectedIndexSTOP, t_arrBlnProcessActivation);
  if(0){
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_ODTCUsedUserPrompt = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      t_blnODTCused = ASWGLOBAL::BOOL::FALSE;
      t_blnStoreHSPoverNightWithinODTC = ASWGLOBAL::BOOL::FALSE;
      l_ODTCUsedUserPrompt = ASWGLOBAL::BOOL::FALSE;
    }
    if (l_ODTCUsedUserPrompt == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(1, Translate("Is the ODTC Module used in this run?"), Translate("YES"), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\OxfordNanopore\LSK109\Pictures\YES_ODTC.bmp"));
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(1, Translate("Is the ODTC Module used in this run?"), Translate("NO"), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\OxfordNanopore\LSK109\Pictures\NO_ODTC.bmp"));
    }
    l_blnMPHUsedUserPrompt = ASWGLOBAL::BOOL::TRUE;
    if (l_blnMPHUsedUserPrompt == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(1, Translate("Do you wish to use the MPH (96Head) Module installed on this instrument for this run?"), Translate("YES"), Translate(""));
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(1, Translate("Do you wish to use the MPH (96Head) Module installed on this instrument for this run?"), Translate("NO"), Translate(""));
    }
  }
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_blnTestODTCWithShortDummyProtocolUserPrompt = ASWGLOBAL::BOOL::TRUE;
  }
  else
  {
    l_blnTestODTCWithShortDummyProtocolUserPrompt = ASWGLOBAL::BOOL::FALSE;
    t_blnTestODTCWithShortDummyProtocol = ASWGLOBAL::BOOL::FALSE;
  }
  l_blnTestODTCWithShortDummyProtocolUserPrompt = ASWGLOBAL::BOOL::FALSE;
  if (l_blnTestODTCWithShortDummyProtocolUserPrompt == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(1, Translate("Use 'dummy' ODTC scripts:"), Translate("YES [WATER RUN]"), Translate(""));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(1, Translate("Use 'dummy' ODTC scripts:"), Translate("NO [REAL SAMPLE RUN]"), Translate(""));
  }
  NGSSTARLOADING::Display_MultipleChoice_Dialog(1);
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(1, Translate("Is the ODTC Module used in this run?"), l_int_OptionSelected);
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("l_int_OptionSelected ODTC: "), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      t_blnODTCused = ASWGLOBAL::BOOL::TRUE;
      t_blnStoreHSPoverNightWithinODTC = ASWGLOBAL::BOOL::FALSE;
      if(0){
        NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(2, Translate("Store HSP over night at the end of curren process?"), Translate("Store HSP over night at room temperature"), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\OxfordNanopore\LSK109\Pictures\YES_ODTC.bmp"));
        NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(2, Translate("Store HSP over night at the end of curren process?"), Translate("Store HSP over night at 12 °C"), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\OxfordNanopore\LSK109\Pictures\NO_ODTC.bmp"));
        NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(2, Translate("Store HSP over night at the end of curren process?"), Translate("Do not store HSP over night."), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\OxfordNanopore\LSK109\Pictures\NO_ODTC.bmp"));
        NGSSTARLOADING::Display_MultipleChoice_Dialog(2);
        NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(2, Translate("Store HSP over night at the end of curren process?"), l_int_OptionSelected);
        if (l_int_OptionSelected == 3)
        {
          t_blnStoreHSPoverNightWithinODTC = ASWGLOBAL::BOOL::FALSE;
        }
        else
        {
          t_blnStoreHSPoverNightWithinODTC = ASWGLOBAL::BOOL::TRUE;
          if (l_int_OptionSelected == 1)
          {
            t_blnStoreAtRoomTemperature = ASWGLOBAL::BOOL::TRUE;
          }
          if (l_int_OptionSelected == 2)
          {
            t_blnStoreAtRoomTemperature = ASWGLOBAL::BOOL::FALSE;
          }
        }
      }
    }
    else
    {
      t_blnODTCused = ASWGLOBAL::BOOL::FALSE;
      t_blnStoreHSPoverNightWithinODTC = ASWGLOBAL::BOOL::FALSE;
    }
  }
  NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(1, Translate("Do you wish to use the MPH (96Head) Module installed on this instrument for this run?"), l_int_OptionSelected);
  TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("l_int_OptionSelected MPH: "), l_int_OptionSelected);
  TrcTrace(Translate("l_int_OptionSelected MPH: "), l_int_OptionSelected);
  if (l_int_OptionSelected == 1)
  {
    t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::TRUE;
    TrcTrace(Translate("t_blnUseMPHInsteadOfChannels : "), t_blnUseMPHInsteadOfChannels);
  }
  else
  {
    t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::FALSE;
    TrcTrace(Translate("t_blnUseMPHInsteadOfChannels : "), t_blnUseMPHInsteadOfChannels);
  }
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(1, Translate("Use 'dummy' ODTC scripts:"), l_int_OptionSelected);
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("l_int_OptionSelected Dummy ODTC Scripts: "), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      t_blnTestODTCWithShortDummyProtocol = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      t_blnTestODTCWithShortDummyProtocol = ASWGLOBAL::BOOL::FALSE;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("t_blnTestODTCWithShortDummyProtocol =  "), t_blnTestODTCWithShortDummyProtocol);
  }
  t_blnODTCused = ASWGLOBAL::BOOL::TRUE;
  t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::TRUE;
  NGSSTARLOADING::Display_Message_Dialog(Translate("This method requires the use of an ODTC (On-Deck Thermal Cycler) and the MPH (96-CORE multi-probe head).\nThe method will error and abort if these are not available."));
  NGSSTARLOADING::Display_InputWorklist_Dialog(l_strFileInputWorklist);
  Trace ("Selected input worklist :", l_strFileInputWorklist);
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    WORKLIST::A_WorkList_Read(ML_STAR, l_strFileInputWorklist, ASWGLOBAL::BOOL::FALSE, 0, 100000, ML_STAR.HSP_Pipette2, t_seqEndPrepSourceWells, ML_STAR.MIDI_Pipette, t_seqEndPrepSourceTargetWells, t_intNumberOfSamplesFromFile, t_intNumberOfTargetsFromFile, t_arrSourceWellPositions, t_arrTargetWellPositions);
  }
  else
  {
    WORKLIST::A_WorkList_Read(ML_STAR, l_strFileInputWorklist, ASWGLOBAL::BOOL::FALSE, 0, 100000, ML_STAR.HSP_Pipette2, t_seqEndPrepSourceWells, ML_STAR.MIDI_Pipette, t_seqEndPrepSourceTargetWells, t_intNumberOfSamplesFromFile, t_intNumberOfTargetsFromFile, t_arrSourceWellPositions, t_arrTargetWellPositions);
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      WORKLIST::A_WorkList_Read(ML_STAR, l_strFileInputWorklist, ASWGLOBAL::BOOL::FALSE, 0, 100000, ML_STAR.HSP_Pipette2, t_seqPoolSourceWells, ML_STAR.MIDI_Pipette, t_seqPoolTargetWells, t_intNumberOfSamplesFromFile, t_intNumberOfTargetsFromFile, t_arrSourceWellPositions, t_arrTargetWellPositions);
    }
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      WORKLIST::A_WorkList_Read(ML_STAR, l_strFileInputWorklist, ASWGLOBAL::BOOL::FALSE, 0, 100000, ML_STAR.HSP_Pipette2, t_seqPoolSourceWells, ML_STAR.MIDI_Pipette, t_seqPoolTargetWells, t_intNumberOfSamplesFromFile, t_intNumberOfTargetsFromFile, t_arrSourceWellPositions, t_arrTargetWellPositions);
    }
  }
  if(0){
    if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(3, Translate("Input Index Format"), l_int_OptionSelected);
      if (l_int_OptionSelected == 1)
      {
        g_bln_IndexesOnPlate = ASWGLOBAL::BOOL::FALSE;
      }
      else
      {
        if (l_int_OptionSelected == 2)
        {
          g_bln_IndexesOnPlate = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          g_bln_IndexesOnPlate = ASWGLOBAL::BOOL::FALSE;
        }
      }
    }
  }
  t_blnSendEmails = ASWGLOBAL::BOOL::FALSE;
  if(0){
    NGSSTARLOADING::Display_SelectEmailAddress_Dialog(t_strEmailAdress);
    l_intLengthEmailAddress = StrGetLength(t_strEmailAdress);
    if (l_intLengthEmailAddress > 0)
    {
      t_blnSendEmails = ASWGLOBAL::BOOL::TRUE;
    }
  }
  if(0){
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      if (t_blnTestODTCWithShortDummyProtocol == ASWGLOBAL::BOOL::TRUE)
      {
        t_strODTCFolderXML = StrConcat2(Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Files\\ODTC_scripts"), Translate("\\LSK109_shortGINIT.xml"));
      }
      else
      {
        t_strODTCFolderXML = StrConcat2(Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\LSK109\\Files\\ODTC_scripts"), Translate("\\LSK109_GINIT.xml"));
      }
      NGSSTARPREP::ODTC_DownloadProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML);
      NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
      if (t_intSelectedIndexSTART == 1)
      {
        MECC::TraceComment(Translate("Default settings for all processes 20°C block and 70°C lid"));
        NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("Init_20C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
        MECC::TraceComment(Translate("Exception settings for  proces 1 4°C block and 30°C lid"));
        NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("Init_4C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
        MECC::TraceComment(Translate("Exception settings for  proces 4 20°C block and 110°C lid"));
        NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("Init_110C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
      }
    }
  }
}

private function Process01_cDNA_EndPrep(  ) void {
  private variable l_blnPCRcompleted;
  private variable l_strReadCurrentBarcode;
  private variable l_intReturnValue_ExternalThermalCycling;
  private variable l_arrListExternalThermalCyclingMessage[];
  MECC::TraceComment(Translate("*************************************************************************************************************************\n********************              SUBMETHOD START: Process01_cDNA_EndPrep            ********************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process 1: DNA End Prep"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 1: DNA End Prep"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM4, t_intRequiredNumberOf300uLTipsM4, t_intRequiredNumberOf1000uLTipsM4, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if (t_blnNormalizeEndPrepInputSamples == ASWGLOBAL::BOOL::TRUE)
  {
  }
  NGSSTARPROCESSES::PIP_MixOnly(ML_STAR, t_seqAspirate_EndPrepMastermix, 0, Translate("ON_LSK109_SVF_DNARepairAndEndPrepMasterMixMixing_SurfaceEmpty"), 5, 0);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_EndPrepMastermix, t_seqHSP_Pipette2, t_fltVolumeEndPrepMasterMix_Process04, Translate("ON_LSK109_50F_DNARepairAndEndPrepMasterMix_SurfaceEmpty"), 0, 0, 0, 0, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate_Mixing(ML_STAR, t_seqHSP_Pipette2, t_seqHSP_Pipette2, 0, Translate("ON_LSK109_50F_DNARepairAndEndPrepMasterMix_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 30, 8, 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_EndPrepMastermix, t_seqHSP_Pipette2, t_fltVolumeEndPrepMasterMix_Process04, Translate("ON_LSK109_50F_DNARepairAndEndPrepMasterMix_SurfaceEmpty"), 8, 0, 30, 0, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  NGSSTARPREP::CPAC_Terminate();
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_blnTestODTCWithShortDummyProtocol == ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      VectorCustomDialogs::AppendStatusText(Translate("Incubating at 20'C for 5 mins, then 65'C for 5 mins"));
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("EndPrep65C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
      NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
      if (t_blnNormalizeEndPrepInputSamples == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette3, t_trpHHS1_HSP, 0, 1, l_strReadCurrentBarcode, 4);
      }
      SeqIncrement(t_trp_StackOut, 1);
    }
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    if (t_intSelectedIndexSTOP > 4)
    {
      NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
      SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
    }
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
  }
  else
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Incubate the plate in a preheated thermocycler as stated for the DNA end prep"));
    }
    l_blnPCRcompleted = 0;
    PTL::ResetUnloadingStateAndSequences();
    PTL::SetUnloadingState("UserResponseTime", hslInfinite);
    PTL::SetUnloadingState("ErrorHandling", 3);
    PTL::SetUnloadingState("InitializeCustomStepID", 0);
    PTL::SetUnloadingState("UnloadCarrierCustomStepID", 0);
    PTL::SetUnloadingSize(1);
    PTL::SetUnloadingSequence(0, t_seqHSP_Pipette2, hslFalse, "");
    if( 0 == PTL::Unload(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetUnloadingSequence(0, t_seqHSP_Pipette2);
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("External library amplification."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Wait until you finished the End Prep of cDNA Library:"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please put the processed plate from the thermocycler to the unloaded carrier at the FOURTH position. "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    PTL::ResetLoadingStateAndSequences();
    PTL::SetLoadingState("UserResponseTime", hslInfinite);
    PTL::SetLoadingState("ErrorHandling", 3);
    PTL::SetLoadingState("InitializeCustomStepID", 0);
    PTL::SetLoadingState("LoadCarrierCustomStepID", 0);
    PTL::SetLoadingState("CalibrateCarrierCustomStepID", 0);
    PTL::SetLoadingState("CalibrateCarrierChannel", -1);
    PTL::SetLoadingSize(1);
    PTL::SetLoadingSequence(0, ML_STAR.HSP_Pipette2, 1, -10, hslTrue, hslFalse, "");
    if( 0 == PTL::Load(ML_STAR, hslTrue) )
    {
          PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetLoadingSequence(0, ML_STAR.HSP_Pipette2);
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  MECC::TraceComment(Translate("*************************************************************************************************************************\n********************               SUBMETHOD END: Process01_cDNA_EndPrep               ********************\n*************************************************************************************************************************"));
}

private function Process02_EndPrepCleanup(  ) void {
  private variable l_strCurrentBarcode;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n********************           SUBMETHOD START: Process02_EndPrepCleanup             ********************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process 2: EndPrepCleanup"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 2: DNA End Prep Clean Up"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM5, t_intRequiredNumberOf300uLTipsM5, t_intRequiredNumberOf1000uLTipsM5, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  MECC::TraceComment(Translate("BRING NEW MIDI TO DECK"));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpMIDI_Pipette, 0, 1, l_strCurrentBarcode, 4);
  MECC::TraceComment(Translate("PIPETTE BEADS TO NEW MIDI"));
  if(0){
    NGSSTARPROCESSES::PIP_MixOnly(ML_STAR, t_seqAspirate_AMPureBeads, 0, Translate("NGSStar_1000F_Bead_Mixing"), 8, t_fltVolumeAMPureBeadsMixing);
  }
  NGSSTARPROCESSES::PIP_MixOnly(ML_STAR, t_seqAspirate_AMPureBeads, 0, Translate("NGSStar_HVF_AMPureBeads_Surface"), 10, 0);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_AMPureBeads, t_seqMIDI_Pipette, t_fltVolumeAMPureBeads01_Process05, Translate("ON_LSK109_HVF_AMPure_JetPart"), 0, 0, 0, 0.5, 10, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  MECC::TraceComment(Translate("TRANSFER SAMPLES TO MIDI & MIX"));
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    if(0){
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate_Mixing(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, t_fltVolumeEndPrepSampleTransfer_Process05, Translate("ON_LSK109_MPH_SVF_SampleForCleanup_SurfaceEmpty"), t_intNumberOfSamplesFromFile, t_fltVolumeEndPrepSampleMixing_Process05, 8, 0.2, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    }
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate_Mixing(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, t_fltVolumeEndPrepSampleTransfer_Process05_1stTransfer, Translate("ON_LSK109_MPH_50F_SampleForCleanup_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0.2, 0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate_Mixing(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, t_fltVolumeEndPrepSampleTransfer_Process05_2ndTransfer, Translate("ON_LSK109_MPH_50F_SampleForCleanup_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0.1, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate_Mixing(ML_STAR, t_seqMIDI_Pipette, t_seqMIDI_Pipette, 0, Translate("ON_LSK109_SVF_AMPure_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 120, 8, 0, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, t_fltVolumeEndPrepSampleTransfer_Process05, Translate("ON_LSK109_SVF_SampleForCleanup_SurfaceEmpty"), 8, 0, t_fltVolumeEndPrepSampleMixing_Process05, 0.2, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  MECC::TraceComment(Translate("TRANSPORT MIDI TO HHS3"));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette, t_trpHHS3_MIDI, 0, 1, l_strCurrentBarcode, 4);
  MECC::TraceComment(Translate("PERFORM CLEAN UP"));
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::Process_CleanUp_MPH_EndPrep(ML_STAR, t_seqAspirate_AMPureBeads, t_seqAspirate_AMPureBeads, t_seqHHS3_MIDI, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqAspirate_NucleaseFreeWater, t_seqMIDI_Pipette, t_fltVolumeEthanol70_Process05, t_fltVolumeAMPureBeads01_Process05, t_fltVolumeResuspensionBuffer_Process05, t_fltVolumeDiscardSampleSupernatant_Process05, Translate("NGSStar_MPH_HVFT_EtOH80_DispenseJet_Part"), Translate("ON_LSK109_MPH_SVF_1stResuspensionBuffer_SurfaceEmpty"), Translate("ON_LSK109_SVF_1stResuspensionBuffer_JetPart"), Translate("ON_LSK109_MPH_SVF_1stSupernatentToWaste_JetEmpty"), Translate("ON_LSK109_MPH_SVF_EthanolSupernatentToWaste_JetEmpty"), 1000, 1000, 30, 30, t_intHHS3_HSP3_MIDI3, 300, 300, 120, 120, 600, t_intNumberOfSamplesFromFile);
  }
  else
  {
    NGSSTARPROCESSES::Process_CleanUp_EndPrep(ML_STAR, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqAspirate_NucleaseFreeWater, t_seqMIDI_Pipette, t_seqMIDI_Pipette, t_fltVolumeEthanol70_Process05, t_fltVolumeResuspensionBuffer_Process05, t_fltVolumeResuspensionBufferMixing_Process05, t_fltVolumeDiscardSampleSupernatant_Process05, Translate("NGSStar_HVFT_EtOH80_DispenseJet_Part"), Translate("ON_LSK109_SVF_1stResuspensionBuffer_JetPart"), Translate("ON_LSK109_SVF_1stResuspensionBuffer_SurfaceEmpty"), Translate("ON_LSK109_SVF_1stSupernatentToWaste_JetEmpty"), Translate("ON_LSK109_SVF_EthanolSupernatentToWaste_JetEmpty"), 1000, 1000, 30, 30, 3, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::FALSE, 300, 180, 120, 0, 600, 150);
  }
  MECC::TraceComment(Translate("MOVE INPUT SAMPLE PLATE TO WASTE"));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_Waste, 0, 0, l_strCurrentBarcode, 4);
  MECC::TraceComment(Translate("BRING NEW HSP TO DECK"));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_trpHSP_Pipette2, 0, 1, l_strCurrentBarcode, 4);
  MECC::TraceComment(Translate("TRANSFER ELUATE TO NEW PLATE"));
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    if(0){
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltVolumeEndPrepCleanUpEluateTransfer_Process05, Translate("ON_LSK109_MPH_SVF_1stResuspensionBuffer_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 0.5, 1.5);
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltVolumeEndPrepCleanUpEluateTransfer_Process05_1stTransfer, Translate("ON_LSK109_50F_MPH_EluateSampleTransfer_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 0, 1.5);
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltVolumeEndPrepCleanUpEluateTransfer_Process05_2ndTransfer, Translate("ON_LSK109_50F_MPH_EluateSampleTransfer_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 0.5, 1.5);
    }
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate_Mixing(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltVolumeEndPrepCleanUpEluateTransfer_Process05_1stTransfer, Translate("ON_LSK109_50F_MPH_EluateSampleTransfer_SurfaceEmpty_JB"), t_intNumberOfSamplesFromFile, 0, 0, 0, 0.7, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate_Mixing(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltVolumeEndPrepCleanUpEluateTransfer_Process05_2ndTransfer, Translate("ON_LSK109_50F_MPH_EluateSampleTransfer_SurfaceEmpty_JB"), t_intNumberOfSamplesFromFile, 0, 0, 0.5, 2, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltVolumeEndPrepCleanUpEluateTransfer_Process05, Translate("ON_LSK109_SVF_1stResuspensionBuffer_SurfaceEmpty"), 0, 0, 0, 0.5, 1.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  MECC::TraceComment(Translate("TRANSPORT MIDI TO WASTE"));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Waste, 0, 1, l_strCurrentBarcode, 4);
  MECC::TraceComment(Translate("*************************************************************************************************************************\n********************            SUBMETHOD END: Process02_EndPrepCleanup                 ********************\n*************************************************************************************************************************"));
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  l_strDialogue = StrConcat8(Translate(""), Translate("The End Prep Clean Up of the LSK109 Method has been completed successfully."), Translate("\n"), Translate("Please remove the processed samples from Position 4 of the unloaded carrier to perform QC step as recommended by the protocol manual."), Translate("\n"), Translate("Otherwise please continue to run the next processes of the method."), Translate("\n"), Translate("Click OK to intiate the shutdown of the instrument."));
  VectorCustomDialogs::MessageDialogWithImage(Translate("Unload Clean End Prep Samples"), 2, 0, 0, 0, 0, l_strDialogue, Translate("C:\Program Files (x86)\HAMILTON\NGSStar\OxfordNanopore\LSK109\Library\NGSStarLoading\PlateTipCarrier.jpg"), 0);
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  VectorCustomDialogs::Terminate();
}

private function Process03_AdapterLigation(  ) void {
  private variable l_strReadCurrentBarcode;
  private timer strAdapterLigationIncubationTimer;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process03_Adapter_Ligation********************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process 3: Adapter Ligation"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 3: Adapter Ligation"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM10, t_intRequiredNumberOf300uLTipsM10, t_intRequiredNumberOf1000uLTipsM10, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_seqMIDI_Pipette, 0, 1, l_strReadCurrentBarcode, 4);
  SeqIncrement(t_trp_Stack1, 1);
  NGSSTARPROCESSES::PIP_MixOnly(ML_STAR, t_seqAspirate_AdapterLigationMastermix, 0, Translate("ON_LSK109_SVF_AdapterLigationMasterMixMixing_SurfaceEmpty"), 5, 0);
  if(0){
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_AdapterLigationMastermix, t_seqMIDI_Pipette, t_fltVolumeAdapterLigationMastermix_Process10, Translate("ON_LSK109_50F_LigationReagentMasterMix_SurfaceEmpty"), 0, 0, 0, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate_AdapterLigation(ML_STAR, t_seqAspirate_AdapterLigationMastermix, t_seqMIDI_Pipette, t_fltVolumeAdapterLigationMastermix_Process10, Translate("ON_LSK109_50F_LigationReagentMasterMix_SurfaceEmpty"), 0, 0, 0, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, Translate("ON_LSK109_SVF_AdapterLigationMasterMixMixing_SurfaceEmpty"), 5, 0, 0, t_seqAspirate_AdapterLigationMastermix);
  if(0){
    NGSSTARPROCESSES::PIP_MixOnly(ML_STAR, t_seqAspirate_AdapterLigationMastermix, 0, Translate("ON_LSK109_SVF_AdapterLigationMasterMixMixing_SurfaceEmpty"), 5, 0);
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_AdapterLigationMastermix, t_seqMIDI_Pipette, t_fltVolumeAdapterLigationMastermix_Process10, Translate("ON_LSK109_50F_LigationReagentMasterMix_SurfaceEmpty"), 0, 0, 0, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPROCESSES::PIP_MixOnly(ML_STAR, t_seqAspirate_AdapterMixII, 0, Translate("ON_LSK109_50F_AdapterMixII_SurfaceEmpty"), 5, 0);
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_AdapterMixII, t_seqMIDI_Pipette, t_fltVolumeAdapterMixII_Process10, Translate("ON_LSK109_50F_AdapterMixII_SurfaceEmpty"), 0, 0, 0, 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    if(0){
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, t_fltVolumeCleanEndPrepSamples_Process10, Translate("ON_LSK109_MPH_SVF_1stResuspensionBuffer_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 3, 0, t_fltVolumeCleanEndPrepSamples_Process10, 0.2, 0.5);
    }
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate_Mixing(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, t_fltVolumeCleanEndPrepSamples_Process10_1stTransfer, Translate("ON_LSK109_MPH_50F_SampleForCleanup_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0.2, 0.5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate_Mixing(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, t_fltVolumeCleanEndPrepSamples_Process10_2ndTransfer, Translate("ON_LSK109_MPH_50F_SampleForCleanup_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 40, 10, 0.1, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, t_fltVolumeCleanEndPrepSamples_Process10, Translate("ON_LSK109_SVF_1stResuspensionBuffer_SurfaceEmpty"), 3, 0, t_fltVolumeCleanEndPrepSamples_Process10, 0.2, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  NGSSTARPREP::CPAC_Terminate();
  MECC::TraceComment(Translate("*************Transfer Ligation Reaction in MIDI to HHS, Shake and Incubate .............."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette, t_trpHHS5_MIDI, 0, 0, l_strReadCurrentBarcode, 4);
  NGSSTARPREP::HHS_Shake(t_intHHS5_MIDI2, 1000, 30);
  NGSSTARPROCESSES::DATA_IncubationTimer(strAdapterLigationIncubationTimer, 600, 1);
  if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpHHS5_MIDI, t_trpMIDI_Pipette, 0, 0, l_strReadCurrentBarcode, 4);
  }
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("*************************************************************************************************************************\n********************        SUBMETHOD END: Process03_AdapterLigation                      ********************\n*************************************************************************************************************************"));
}

private function Process04_AdapterLigationCleanup(  ) void {
  private variable l_strReadCurrentBarcode;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process04_AdapterLigationCleanup********************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process 4: Adapter Ligation Cleanup"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 4: Adapter Ligation Cleanup"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM11, t_intRequiredNumberOf300uLTipsM11, t_intRequiredNumberOf1000uLTipsM11, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPREP::HHS_SetTemperature(t_intHHS4_MIDI1, 37.0);
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette, t_trpHHS5_MIDI, 0, 0, l_strReadCurrentBarcode, 4);
  }
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::Process_CleanUp_MPH_AdapterLigation_LFBorSFB(ML_STAR, t_seqAspirate_AMPureBeads, t_seqAspirate_AMPureBeads, t_seqHHS5_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqMIDI_Pipette, t_seqAspirate_FragmentBuffer, t_seqAspirate_ElutionBuffer, t_seqHHS4_MIDI, t_fltVolumeFragmentBuffer_Process11, t_fltVolumeAMPureBeads01_Process11, t_fltVolumeElutionBuffer_Process11, t_fltVolumeSupernatantToWaste_Process11, Translate("ON_LSK109_SVF_AMPure_SurfaceEmpty"), Translate("NGSStar_HVF_AMPureBeads_Surface"), Translate("ON_LSK109_HVF_FragmentBuffer_JetPart"), Translate("ON_LSK109_MPH_SVF_1stResuspensionBuffer_SurfaceEmpty"), Translate("ON_LSK109_MPH_SVF_1stSupernatentToWaste_JetEmpty"), Translate("ON_LSK109_SVF_FragmentBuffer_SurfaceEmpty"), Translate("ON_LSK109_MPH_SVF_FragmentBuffer_SurfaceEmpty"), Translate("ON_LSK109_SVF_ElutionBuffer1_JetPart"), Translate("ON_LSK109_50F_MPH_FinalResuspensionBuffer_JetEmpty"), 1500, 1000, 30, 30, t_intHHS4_MIDI1, t_intHHS5_MIDI2, 300, 300, 30, 600, 300, 300, 1, t_intNumberOfSamplesFromFile, Translate("ON_LSK109_MPH_SVF_FragmentBuffer_SurfaceEmpty"));
  }
  else
  {
    NGSSTARPROCESSES::Process_CleanUp_AdapterLigation_LFBorSFB(ML_STAR, t_seqAspirate_AMPureBeads, t_seqAspirate_AMPureBeads, t_seqHHS5_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqMIDI_Pipette, t_seqAspirate_FragmentBuffer, t_seqAspirate_ElutionBuffer, t_seqHHS4_MIDI, t_fltVolumeFragmentBuffer_Process11, t_fltVolumeAMPureBeads01_Process11, t_fltVolumeElutionBuffer_Process11, t_fltVolumeSupernatantToWaste_Process11, Translate("ON_LSK109_SVF_AMPure_SurfaceEmpty"), Translate("NGSStar_HVF_AMPureBeads_Surface"), Translate("ON_LSK109_HVF_FragmentBuffer_JetEmpty"), Translate("ON_LSK109_SVF_FragmentBuffer_SurfaceEmpty"), Translate("ON_LSK109_SVF_1stSupernatentToWaste_JetEmpty"), Translate("ON_LSK109_SVF_FragmentBuffer_SurfaceEmpty"), Translate("ON_LSK109_SVF_FragmentBuffer_SurfaceEmpty"), Translate("ON_LSK109_SVF_FinalResuspensionBuffer_JetPart"), 1500, 1000, 30, 30, 12, t_intHHS5_MIDI2, ASWGLOBAL::BOOL::FALSE, 300, 240, 30, 480, 90, 180, 1);
  }
  NGSSTARPREP::HHS_SetTemperature(t_intHHS4_MIDI1, 0);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode, 4);
  SeqIncrement(t_trp_Stack4, 1);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, 25, Translate("ON_LSK109_50F_MPH_FinalResuspensionBuffer_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 0.5, 0.5);
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, 25, Translate("ON_LSK109_50F_FinalResuspensionBuffer_SurfaceEmpty"), 0, 0, 0, 0.2, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD END: Process04_AdapterLigationCleanup********************\n*************************************************************************************************************************"));
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  l_strDialogue = StrConcat8(Translate(""), Translate("LSK109 Method has been completed successfully."), Translate("\n"), Translate("Please remove the processed samples from Position 4 of the unloaded carrier."), Translate("\n"), Translate("Click OK to intiate the shutdown of the instrument."), Translate(""), Translate(""));
  VectorCustomDialogs::MessageDialogWithImage(Translate("Unload Clean End Prep Samples"), 2, 0, 0, 0, 0, l_strDialogue, Translate("C:\Program Files (x86)\HAMILTON\NGSStar\OxfordNanopore\LSK109\Library\NGSStarLoading\PlateTipCarrier.jpg"), 0);
  VectorCustomDialogs::Terminate();
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
}

private function ProcessX_StoreHSPWithinODTCOverNight( sequence & i_trpHSP, variable i_blnIncubateODTCWithoutActiveCooling ) void {
  private variable l_strDehumidifyMessage;
  private variable l_strSequenceName;
  private variable l_strODTCMessage;
  private variable l_intODTCStorageCycle;
  private variable l_retValueDialog;
  private variable l_blnRetrievePlateFromODTC;
  private variable l_strODTCFolderXML;
  private variable l_strReadCurrentBarcode;
  private variable l_intDehumidifyCycle;
  private variable l_arrODTCStorageListInformation[];
  private variable l_arrDehumidifyListInformation[];
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  ProcessX_StoreHSPWithinODTCOverNight********************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process X: Storing the HSP within ODTC over night."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process X: Storing the HSP within ODTC over night."), ASWGLOBAL::BOOL::YES);
  l_strODTCFolderXML = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\OxfordNanopore\\PCRtilingLSK109\\Files\\ODTC_scripts\\StorePlateOverNight.xml");
  l_blnRetrievePlateFromODTC = ASWGLOBAL::BOOL::FALSE;
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    {
      l_intODTCStorageCycle = 0;
      while (1 == 1)
      {
        l_intODTCStorageCycle = l_intODTCStorageCycle + 1;
        if (l_intODTCStorageCycle == 1)
        {
          NGSSTARPREP::ODTC_DownloadProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML);
          NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
          NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, i_trpHSP, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
          Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
          NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
          NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
          if (i_blnIncubateODTCWithoutActiveCooling == ASWGLOBAL::BOOL::TRUE)
          {
            MECC::TraceComment(Translate("NO ODTC protocol will be activated."));
          }
          else
          {
            NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, Translate("StorePlate12degrees"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
          }
        }
        l_arrODTCStorageListInformation.SetSize(0);
        l_strODTCMessage = StrConcat2(Translate("ODTC - 2 hours cycle number : "), l_intODTCStorageCycle);
        l_arrODTCStorageListInformation.AddAsLast(l_strODTCMessage);
        l_strSequenceName = SeqGetName(i_trpHSP);
        l_strODTCMessage = StrConcat2(Translate("Retrieving the plate to following sequence : "), l_strSequenceName);
        l_arrODTCStorageListInformation.AddAsLast(l_strODTCMessage);
        l_arrODTCStorageListInformation.AddAsLast(Translate("Press OK to retrieve the HSP from ODTC."));
        l_retValueDialog = VectorCustomDialogs::ListDialog(Translate("ODTC long time storage."), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::Ok, 0, 0, 7200, Translate(""), Translate("This procedure will prolong itself each 2 hours automatically. Press YES to retrieve HSP."), l_arrODTCStorageListInformation);
        Trace("l_retValueDialog : ",l_retValueDialog);
        if (t_blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
        {
          l_retValueDialog = VectorCustomDialogs::MessageDialog(Translate("Simulation mode ODTC cycles"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Press YES to quit endless loop. Press NO to add an additional ODTC storage cycle."));
          if (l_retValueDialog == ASWGLOBAL::DIALOG::YES)
          {
            l_blnRetrievePlateFromODTC = ASWGLOBAL::BOOL::TRUE;
          }
        }
        else
        {
          if (l_retValueDialog == ASWGLOBAL::DIALOG::OK)
          {
            l_blnRetrievePlateFromODTC = ASWGLOBAL::BOOL::TRUE;
          }
        }
        if (l_blnRetrievePlateFromODTC == ASWGLOBAL::BOOL::TRUE)
        {
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
          NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
          if (t_intSelectedIndexSTOP == 2)
          {
            NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
            SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
          }
          else
          {
            NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
          }
          NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, i_trpHSP, 0, 1, l_strReadCurrentBarcode);
          NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
          break;
        }
      }
    }
    if (i_blnIncubateODTCWithoutActiveCooling == ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      {
        l_intDehumidifyCycle = 0;
        while (1 == 1)
        {
          l_intDehumidifyCycle = l_intDehumidifyCycle + 1;
          if (l_intDehumidifyCycle == 1)
          {
            NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, Translate("Reset12To20degrees"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
            NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
          }
          NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, Translate("Dehumidify block"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
          NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
          NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
          l_arrDehumidifyListInformation.SetSize(0);
          l_strDehumidifyMessage = StrConcat2(Translate("Dehumidify the ODTC - cycle number : "), l_intDehumidifyCycle);
          l_arrDehumidifyListInformation.AddAsLast(l_strDehumidifyMessage);
          l_arrDehumidifyListInformation.AddAsLast(Translate("Press YES to start an additional dehumidify cycle."));
          l_arrDehumidifyListInformation.AddAsLast(Translate("Press NO to terminate the current workflow."));
          l_retValueDialog = VectorCustomDialogs::ListDialog(Translate("Dehumidify ODTC after long time storage."), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate(""), Translate("Check the ODTC block if there is still humidity and start an additional dehumidify procedure if needed. "), l_arrDehumidifyListInformation);
          if (l_retValueDialog == ASWGLOBAL::DIALOG::NO)
          {
            break;
          }
          NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
        }
      }
    }
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: ProcessX_StoreHSPWithinODTCOverNight********************"));
}
