#pragma once
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLSeqLib.hsl"
#include "STAR Tools\\STAR Tip Tools.hs_"
#include "STAR Tools\\STAR MPH96 Tools.hs_"
#include "HSLStrLib.hsl"
#include "SMT\\MLSTARLiquidClassLib.hsl"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "HSLMthLib.hsl"
#include "STAR Tools\\STAR Channel Tools.hs_"
#include "Labware Properties\\Labware_Property_Query.hs_"
#include "HSLUtilLib2.hsl"
#include "HSLDevLib.hsl"
#include "HSLExtensions\\Array.hsl"
#include "ARW Libraries\\DataController\\DataController.hs_"
#include "HSLTrcLib.hsl"
#include "HSLTimLib.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "VirtualLabware_V2\\VirtualLabware_V2.hsl"
#include "SequenceTools_V2\\SequenceTools_V2.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"
#include "HSLSTCCLib.hs_"

namespace STAR_VOV_GENERIC_FRAMEWORK_V0_2_1 {
  variable t_strTipCounter1000uL;
  variable t_blnSkipPipetting;
  variable t_strTipCounter50uL;
  variable t_strTipCounter300uL;
  sequence t_seqTipSupport;
  sequence t_seqTips1000uL;
  sequence t_seqTips50uL;
  sequence t_seqTips300uL;
  variable _strFunctionName;
  sequence t_seqGripperPaddles;
  variable t_intReaderPosition;
  variable t_strMappingFileDirectory;
  variable t_strMappingFileName;
  variable t_intForkID;
  variable t_blnSimulationMode;
  sequence seq_TipSupport;
  function DATA_ReagentVolumeVerification( device & ML_STAR, sequence & i_arrInputSequences[], variable & o_arrVolumesmeasured[] ) void ;
  function INIT_InitializeController( device & ML_STAR, variable i_blnTraceLevel, variable i_blnSkipPipetting, variable i_intReaderPosition, variable i_blnSimulationMode, variable i_strMappingFilePath, variable i_blnSkipTimers ) void ;
  function PIP_CleanUpTipAdapter( device & ML_STAR ) void ;
  function PIP_MPH_AspirateAll( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent, variable i_fltSpeedFactor ) void ;
  function PIP_MPH_AspirateAllForStamp( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent, variable i_fltSpeedFactor ) void ;
  function PIP_MPH_EthanolWash( device & ML_STAR, sequence i_seqEthanolPosition, sequence i_seqMIDIPlatePosition, sequence i_seqLiquidWastePosition, variable i_fltEthanolVolume, variable i_fltExtraVolume, variable i_strLiquidClassEthanolAddition, variable i_strLiquidClassFirstRemoval, variable i_strLiquidClassSecondRemoval, variable i_strTrackingFileStatus ) void ;
  function PIP_MPH_EthanolWashV2( device & ML_STAR, sequence i_seqEthanolPosition, sequence i_seqMIDIPlatePosition, sequence i_seqLiquidWastePosition, variable i_fltEthanolAdditionVolume, variable i_fltEthanolTotalRemovalVolume, variable i_fltAdditionalRemoval, variable i_strLiquidClassEthanolAddition, variable i_strLiquidClassFirstRemoval, variable i_strLiquidClassSecondRemoval, variable i_strTrackingFileStatus ) void ;
  function PIP_MPH_EthanolWashV2_HSP( device & ML_STAR, sequence i_seqEthanolPosition, sequence i_seqMIDIPlatePosition, sequence i_seqLiquidWastePosition, variable i_fltEthanolAdditionVolume, variable i_fltEthanolTotalRemovalVolume, variable i_fltAdditionalRemoval, variable i_strLiquidClassEthanolAddition, variable i_strLiquidClassFirstRemoval, variable i_strLiquidClassSecondRemoval, variable i_strTrackingFileStatus ) void ;
  function PIP_MPH_MixPlate( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent ) void ;
  function PIP_MPH_MixPlateV2( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intMixCount, variable i_intMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent ) void ;
  function PIP_MPH_MixPlateV3( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent ) void ;
  function PIP_MPH_MixPlateV4( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent, variable i_intLoopCount ) void ;
  function PIP_MPH_RemoveAndSaveSupernatant( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqLiquidWastePosition, variable i_strLiquidClass1, variable i_strLiquidClass2, variable i_fltTotalVolumeInWells, variable i_fltAdditionalRemoval, variable i_strTrackingFileStatus ) void ;
  function PIP_MPH_RemoveAndSaveSupernatant_v2( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_strLiquidClass1, variable i_fltTotalVolumeInWells, variable i_strTrackingFileStatus ) void ;
  function PIP_MPH_RemoveSupernatant( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqLiquidWastePosition, variable i_strLiquidClass1, variable i_strLiquidClass2, variable i_fltTotalVolumeInWells, variable i_fltAdditionalRemoval, variable i_strTrackingFileStatus ) void ;
  function PIP_MPH_ShearPlate( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent, variable & i_intLoopCount ) void ;
  function PIP_MPH_ShearPlateV2( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent, variable i_intLoopCount ) void ;
  function PIP_MPH_SingleDispense( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent ) void ;
  function PIP_MPH_SingleDispenseLowElution( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent ) void ;
  function PIP_MPH_SingleDispenseSRE( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent ) void ;
  private function PIP_MPH_SizeSelectionEthanolWash( device & ML_STAR, sequence i_seqEthanolPosition, sequence i_seqMIDIPlatePosition, sequence i_seqLiquidWastePosition, variable i_fltEthanolVolume, variable i_fltExtraVolume, variable i_strLiquidClassEthanolAddition, variable i_strLiquidClassFirstRemoval, variable i_strLiquidClassSecondRemoval, variable i_strTrackingFileStatus ) void ;
  private function PIP_MPH_SizeSelectionRemoveSupernatent( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqLiquidWastePosition, variable i_strLiquidClass1, variable i_strLiquidClass2, variable i_fltTotalVolumeInWells, variable i_fltAdditionalRemoval, variable i_strTrackingFileStatus ) void ;
  function PIP_MPH_TransferAdapters( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent ) void ;
  function PIP_MixLiquid( device & iML_Star, variable i_intTipType, sequence iSeq_MixingSequence, variable iAspirationVolume, variable iAspirationSpeed, variable iLoopCycles, variable iWaitingTimeBetweenCyles, variable iMixVolume, variable iMixSpeed, variable iMixCycles ) void ;
  function PIP_MixTubes( device & ML_STAR, variable i_intAspirationMode, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltTransferVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_blnReuseTips, variable i_strTrackingFileStatus, variable i_blnIsSampleOrReagent ) void ;
  function PIP_MultiDispense( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_strLiquidClass, variable i_fltVolume, variable i_fltPreDispenseVolume, variable i_fltPostDispenseVolume, variable i_fltDispenseHeight, variable i_strTrackingFileStatus ) void ;
  function PIP_MultiDispense_V2( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_strLiquidClass, variable i_fltVolume, variable i_fltPreDispenseVolume, variable i_fltPostDispenseVolume, variable i_fltDispenseHeight, variable i_strTrackingFileStatus, variable i_intDispenseToSource ) void ;
  function PIP_MultiDsp_OneChannel( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_strLiquidClass, variable i_fltVolume, variable i_fltPreDispenseVolume, variable i_fltPostDispenseVolume, variable i_fltDispenseHeight, variable i_strTrackingFileStatus ) void ;
  function PIP_ShearPlate( device & ML_STAR, variable i_intAspirationMode, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltTransferVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_blnReuseTips, variable i_strTrackingFileStatus, variable i_blnIsSampleOrReagent ) void ;
  function PIP_SingleDispense( device & ML_STAR, variable i_intAspirationMode, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltTransferVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_blnReuseTips, variable i_strTrackingFileStatus, variable i_blnIsSampleOrReagent ) void ;
  private function PIP_SingleDispenseFromTrough( device & ML_STAR, variable i_intAspirationMode, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltTransferVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_blnReuseTips, variable i_strTrackingFileStatus, variable i_blnIsSampleOrReagent ) void ;
  function PIP_SingleDispenseLowElution( device & ML_STAR, variable i_intAspirationMode, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltTransferVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_blnReuseTips, variable i_strTrackingFileStatus, variable i_blnIsSampleOrReagent ) void ;
  function PIP_SingleDispensePooling( device & ML_STAR, variable i_intAspirationMode, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltTransferVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_blnReuseTips, variable i_strTrackingFileStatus, variable i_blnIsSampleOrReagent, variable i_fltAspVolume, variable i_fltDspVolume ) void ;
  private function PIP_SingleDispenseWithIntervalMixing( device & ML_STAR, variable i_intAspirationMode, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltTransferVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intAspirationMixFrequency, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_blnReuseTips, variable i_strTrackingFileStatus, variable i_blnIsSampleOrReagent ) void ;
  function PIP_SingleDispense_pLLD( device & ML_STAR, variable i_intAspirationMode, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltTransferVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_blnReuseTips, variable i_strTrackingFileStatus, variable i_blnIsSampleOrReagent ) void ;
  function PIP_SupernatentRemoval( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_strLiquidClass1, variable i_strLiquidClass2, variable i_fltTotalVolumeInWells, variable i_fltAdditionalRemoval, variable i_strTrackingFileStatus ) void ;
  function TIP_DisplayUsage( device & ML_STAR ) void ;
  function TIP_EditTipSequences( device & ML_STAR, variable i_blnEditable, variable i_intTipsNeeded1000uL, variable i_intTipsNeeded300uL, variable i_intTipsNeeded50uL ) void ;
  function TIP_TipConsolidation( device & ML_STAR ) void ;
  function TRP_GripperArm( device & ML_STAR, sequence & i_seqSourcePosition, sequence & i_seqDestinationPosition, variable i_blnParkArm, variable i_blnGripOrientation ) void ;
  function TRP_GripperPaddles( device & ML_STAR, sequence i_seqSourcePosition, sequence i_seqDestinationPosition, variable i_blnCheckPlateAtSource, variable i_blnCheckPlateAtDestination, variable i_blnEjectGrippers ) void ;
  function _Abstract(  ) void ;
  private function _DATA_GetLabwareIDAndSequenceNamesFromDeck( device & ML_STAR, variable & o_arrLabwareNames[], variable & o_arrSequenceNames[] ) void ;
  private function _DetermineTipTypeFromLiquidClass( variable i_strLiquidClass, variable & o_intTipType, variable & o_fltMaxVolume ) void ;
  private function _GetPartialChannelPatternForAspiration( device & ML_STAR, variable i_strTargetChannelPattern, variable i_intTotalTubes, variable & o_intLoopNumber, variable & o_arrChannelPatterns[] ) void ;
  private function _MatchAspirationToDispenseSequence( sequence i_seqAspirationPosition, sequence i_seqDispensePosition, sequence & o_seqAdoptedAspirationPosition, sequence & o_seqAdpotedDispensePosition ) void ;
  private function _PickUpTipsBasedOnTipType( device & ML_STAR, variable i_strChannelPattern, variable i_intTipType ) void ;
  private function _PickUpTipsBasedOnTipTypeMPH96( device & ML_STAR, variable i_intTotalSamples, variable i_intTipType ) variable ;
  private function _RemoveUsedPositions( sequence & io_seq_SequenceToCheck ) void ;
  private function _VersionHistory(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    STAR_MPH96_TOOLS::_InitLibrary();
    STAR_CHANNEL_TOOLS::_InitLibrary();
    LPQ::_InitLibrary();
    DATACONTROLLER::_InitLibrary();
    SEQUENCETOOLS_V2::_InitLibrary();
  }
  function _ExitLibrary() {
    STAR_TIP_TOOLS::_ExitLibrary();
    STAR_MPH96_TOOLS::_ExitLibrary();
    STAR_CHANNEL_TOOLS::_ExitLibrary();
    LPQ::_ExitLibrary();
    DATACONTROLLER::_ExitLibrary();
    SEQUENCETOOLS_V2::_ExitLibrary();
  }

  function _Abstract(  ) void {
  }

  private function PIP_SingleDispenseWithIntervalMixing( device & ML_STAR, variable i_intAspirationMode, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltTransferVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intAspirationMixFrequency, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_blnReuseTips, variable i_strTrackingFileStatus, variable i_blnIsSampleOrReagent ) void {
    private sequence l_seqAdoptedAspirationPosition;
    private variable l_intTipType;
    private variable l_fltMaxVolume;
    private variable l_blnFixedHeightDispense;
    private variable l_blnFixedHeightAspiration;
    private variable l_intAdditionRound;
    private variable l_intTotalPositions;
    private variable l_strChannelPattern;
    private sequence l_seqDisp;
    private variable l_intTotalChannels;
    private sequence l_seqAdoptedDispensePosition;
    private sequence l_seqAsp;
    private variable l_strLiqReturn;
    private variable l_strAspReturn;
    private variable l_strDspReturn;
    private variable i_blnIsReagent;
    private variable i_blnTransferSampleOrReagent;
    private variable i_blnIsSample;
    private variable l_fltDetermineMix;
    private variable l_intAspirationMixCount;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_intAspirationMode > 2)
    {
      VectorCustomDialogs::MessageDialog(Translate("Incorrect Parameter"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Method will abort because of improper aspiration mode"));
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    STAR_TIP_TOOLS::Get1mLChannelCount(ML_STAR, l_intTotalChannels);
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltTransferVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _MatchAspirationToDispenseSequence(i_seqAspirationPosition, i_seqDispensePosition, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition);
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltTransferVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    l_intTotalPositions = SeqGetTotal(l_seqAdoptedDispensePosition);
    {
      l_intAdditionRound = 0;
      while (l_intTotalPositions > 0)
      {
        l_intAdditionRound = l_intAdditionRound + 1;
        l_fltDetermineMix = l_intAdditionRound % i_intAspirationMixFrequency;
        l_intTotalPositions = STAR_CHANNEL_TOOLS::CHAN_ACCESS_Sort2Sequences(ML_STAR, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition, 0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_intTotalChannels, l_seqAsp, l_seqDisp, l_strChannelPattern);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Number of Channels: "), l_intTotalChannels);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Channel Pattern: "), l_strChannelPattern);
        MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
        if (i_blnReuseTips == ASWGLOBAL::BOOL::FALSE)
        {
          _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
        }
        else
        {
          if (l_intAdditionRound == 1)
          {
            _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
          }
        }
        MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
        if (l_fltDetermineMix != 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Mixing at pipette step: "), Translate("FALSE"));
          l_intAspirationMixCount = 0;
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Mixing at pipette step: "), Translate("TRUE"));
          l_intAspirationMixCount = i_intAspirationMixCount;
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	l_strAspReturn = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
          	l_strLiqReturn = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	l_strDspReturn = arrRetValues[2];
        }
        if (i_blnReuseTips == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, l_strAspReturn, Translate(""), l_strLiqReturn, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
        DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
      }
    }
    if (i_blnReuseTips == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MPH_SingleDispense( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent ) void {
    private variable l_fltMaxVolume;
    private variable l_intTipType;
    private variable l_intCurrentPosition;
    private variable l_intEndPosition;
    private variable l_intNumberOfSamples;
    private variable l_blnFixedHeightDispense;
    private variable l_blnFixedHeightAspiration;
    private variable l_intCurrentPositionTipSupport;
    private variable l_strAspReturn3;
    private variable l_strAspReturn4;
    private variable l_strDspReturn3;
    private variable l_strDspReturn4;
    private variable l_strReturn3Tip;
    private variable i_blnIsSample;
    private variable i_blnIsReagent;
    private dialog dialogHandle_1;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    SeqResetSequenceIndexes(i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqDispensePosition.GetCurrentPosition();
      l_intEndPosition = i_seqDispensePosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    if(0){
      dialogHandle_1.SetOutput(l_intNumberOfSamples);
      dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function TRP_GripperPaddles( device & ML_STAR, sequence i_seqSourcePosition, sequence i_seqDestinationPosition, variable i_blnCheckPlateAtSource, variable i_blnCheckPlateAtDestination, variable i_blnEjectGrippers ) void {
    private variable l_strLabwareID;
    private variable l_strPositionID;
    private sequence l_seqSource;
    private sequence l_seqDestination;
    private variable l_fltRackClearanceHeight;
    private variable l_fltRackHeight;
    private variable l_fltGripHeight;
    private variable l_fltGripWidth;
    private variable l_fltGripOpenWidth;
    private variable l_fltGripForce;
    private variable l_strReturn;
    private variable l_strLabwareIDSource;
    private variable l_strLabwareIDDestination;
    private variable l_PlacePlateData;
    private dialog customDialog_2;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    l_strLabwareID = SeqGetLabwareId(i_seqSourcePosition);
    l_fltGripHeight = DevGetLabwareData(ML_STAR, l_strLabwareID, Translate("GripHeight"));
    l_fltGripWidth = DevGetLabwareData(ML_STAR, l_strLabwareID, Translate("GripWidth"));
    l_fltGripOpenWidth = DevGetLabwareData(ML_STAR, l_strLabwareID, Translate("GripOpenWidth"));
    l_fltGripForce = DevGetLabwareData(ML_STAR, l_strLabwareID, Translate("GripForce"));
    l_fltGripHeight = StrFVal(l_fltGripHeight);
    l_fltGripWidth = StrFVal(l_fltGripWidth);
    l_fltGripOpenWidth = StrFVal(l_fltGripOpenWidth);
    l_fltGripForce = StrFVal(l_fltGripForce);
    if (l_fltGripHeight == 0)
    {
      LPQ::LABWARE_GetRackHeight(ML_STAR, i_seqSourcePosition, ASWGLOBAL::BOOL::FALSE, l_fltRackHeight, l_fltRackClearanceHeight);
      l_fltGripHeight = l_fltRackHeight / 3;
      if (l_fltGripHeight > 8)
      {
        l_fltGripHeight = 8;
      }
    }
    if (l_fltGripWidth == 0)
    {
      l_fltGripWidth = 81;
    }
    if (l_fltGripOpenWidth == 0)
    {
      l_fltGripOpenWidth = 87;
    }
    if (l_fltGripForce == 0)
    {
      l_fltGripForce = 8;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("     Source Labware ID:  "), l_strLabwareID);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("     Parameter from Labware - Grip Height:  "), l_fltGripHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("     Parameter from Labware - Grip Width:  "), l_fltGripWidth);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("     Parameter from Labware - Grip Open Width:  "), l_fltGripOpenWidth);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("     Parameter from Labware - Grip Force:  "), l_fltGripForce);
    if(0){
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqSourcePosition);
    }
    SeqRemoveAll(l_seqSource);
    l_strLabwareID = SeqGetLabwareId(i_seqSourcePosition);
    l_strPositionID = SeqGetPositionId(i_seqSourcePosition);
    SeqAdd(l_seqSource, l_strLabwareID, l_strPositionID);
    SeqResetSequenceIndexes(l_seqSource);
    if(0){
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, l_seqSource);
    }
    if(0){
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDestinationPosition);
    }
    SeqRemoveAll(l_seqDestination);
    l_strLabwareID = SeqGetLabwareId(i_seqDestinationPosition);
    l_strPositionID = SeqGetPositionId(i_seqDestinationPosition);
    SeqAdd(l_seqDestination, l_strLabwareID, l_strPositionID);
    SeqResetSequenceIndexes(l_seqDestination);
    if(0){
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, l_seqDestination);
    }
    onerror goto errLabel_3 ;
    err.Clear();
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      	l_PlacePlateData = arrRetValues[2];
    }
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      l_strLabwareIDSource = SeqGetLabwareId(i_seqSourcePosition);
      l_strLabwareIDDestination = SeqGetLabwareId(i_seqDestinationPosition);
      l_strReturn = StrConcat4(Translate("Please pickup the plate from "), l_strLabwareIDSource, Translate("and move it to "), l_strLabwareIDDestination);
      customDialog_2.InitCustomDialog("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");
      customDialog_2.SetCustomDialogProperty( "textBlock3.Text", l_strLabwareIDSource );
      customDialog_2.SetCustomDialogProperty( "textBlock4.Text", l_strLabwareIDDestination );
      customDialog_2.ShowCustomDialog();
      VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Paddles had difficulties picking up the plate."), l_strReturn);
    }   /* end if from skip handler if no error */
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function INIT_InitializeController( device & ML_STAR, variable i_blnTraceLevel, variable i_blnSkipPipetting, variable i_intReaderPosition, variable i_blnSimulationMode, variable i_strMappingFilePath, variable i_blnSkipTimers ) void {
    private variable l_arrSequenceNames[];
    private variable l_arrLabwareNames[];
    private variable l_bln50FTipsDoNotExist;
    private variable l_arrIndexes[];
    private variable _intStartPositionTip50;
    private variable l_intArrayPosition;
    private variable l_bln300FTipsDoNotExist;
    private variable _intStartPositionTip300;
    private variable l_bln1000FTipsDoNotExist;
    private variable _intStartPositionTip1000;
    private sequence i_seqTips50Filter;
    private sequence i_seqTips300Filter;
    private sequence i_seqTips1000Filter;
    private variable l_blnCOREGripDoNotExist;
    private sequence i_seqCOREGripper;
    private variable l_blnTipSupportDoNotExist;
    private sequence i_seqTipSupport;
    private event t_eventWaitForParallel;
    private variable t_strMappingFilePath;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    t_strMappingFilePath = i_strMappingFilePath;
    DATACONTROLLER::INIT_InitializeController(i_blnSimulationMode, ASWGLOBAL::BOOL::TRUE, i_blnSkipTimers, t_strMappingFilePath);
    DATACONTROLLER::FILE_InitializeTrackingFile(ML_STAR);
    _DATA_GetLabwareIDAndSequenceNamesFromDeck(ML_STAR, l_arrLabwareNames, l_arrSequenceNames);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("****************************************"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Trace Level:  "), i_blnTraceLevel, Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Skip Pipetting:  "), i_blnSkipPipetting, Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Barcode Read Position [track number]:  "), i_intReaderPosition, Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Simulation Mode:  "), i_blnSimulationMode, Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("****************************************"), Translate(""));
    l_arrIndexes = HSLExtensions::Array::FindValue(l_arrSequenceNames, Translate("MlStar50ulTipWithFilter"));
    l_bln50FTipsDoNotExist = HSLExtensions::Array::IsEmpty(l_arrIndexes);
    if (l_bln50FTipsDoNotExist == ASWGLOBAL::BOOL::FALSE)
    {
      l_intArrayPosition = l_arrIndexes.ElementAt( 1 -1);
      DevGetSequenceRef(ML_STAR, l_arrSequenceNames.ElementAt( l_intArrayPosition -1), i_seqTips50Filter);
      SeqRemoveAll(t_seqTips50uL);
      SeqCopySequence(t_seqTips50uL, i_seqTips50Filter);
      _intStartPositionTip50 = t_seqTips50uL.GetCurrentPosition();
      t_strTipCounter50uL = Translate("TipCounter50uL");
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Sequence handed over to submethod library:  "), l_arrSequenceNames.ElementAt( l_intArrayPosition -1));
    }
    l_arrIndexes.SetSize(0);
    STAR_TIP_TOOLS::TipCountNeeded_Reset(t_strTipCounter50uL);
    l_arrIndexes = HSLExtensions::Array::FindValue(l_arrSequenceNames, Translate("MlStar300ulStandardVolumeTipWithFilter"));
    l_bln300FTipsDoNotExist = HSLExtensions::Array::IsEmpty(l_arrIndexes);
    if (l_bln300FTipsDoNotExist == ASWGLOBAL::BOOL::FALSE)
    {
      l_intArrayPosition = l_arrIndexes.ElementAt( 1 -1);
      DevGetSequenceRef(ML_STAR, l_arrSequenceNames.ElementAt( l_intArrayPosition -1), i_seqTips300Filter);
      SeqRemoveAll(t_seqTips300uL);
      SeqCopySequence(t_seqTips300uL, i_seqTips300Filter);
      _intStartPositionTip300 = t_seqTips300uL.GetCurrentPosition();
      t_strTipCounter300uL = Translate("TipCounter300uL");
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Sequence handed over to submethod library:  "), l_arrSequenceNames.ElementAt( l_intArrayPosition -1));
    }
    l_arrIndexes.SetSize(0);
    STAR_TIP_TOOLS::TipCountNeeded_Reset(t_strTipCounter300uL);
    l_arrIndexes = HSLExtensions::Array::FindValue(l_arrSequenceNames, Translate("MlStar1000ulHighVolumeTipWithFilter"));
    l_bln1000FTipsDoNotExist = HSLExtensions::Array::IsEmpty(l_arrIndexes);
    if (l_bln1000FTipsDoNotExist == ASWGLOBAL::BOOL::FALSE)
    {
      l_intArrayPosition = l_arrIndexes.ElementAt( 1 -1);
      DevGetSequenceRef(ML_STAR, l_arrSequenceNames.ElementAt( l_intArrayPosition -1), i_seqTips1000Filter);
      SeqRemoveAll(t_seqTips1000uL);
      SeqCopySequence(t_seqTips1000uL, i_seqTips1000Filter);
      _intStartPositionTip1000 = t_seqTips1000uL.GetCurrentPosition();
      t_strTipCounter1000uL = Translate("TipCounter1000uL");
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Sequence handed over to submethod library:  "), l_arrSequenceNames.ElementAt( l_intArrayPosition -1));
    }
    l_arrIndexes.SetSize(0);
    STAR_TIP_TOOLS::TipCountNeeded_Reset(t_strTipCounter1000uL);
    l_arrIndexes = HSLExtensions::Array::FindValue(l_arrSequenceNames, Translate("COREGripTool_OnWaste_1000ul_0001"));
    l_blnCOREGripDoNotExist = HSLExtensions::Array::IsEmpty(l_arrIndexes);
    if (l_blnCOREGripDoNotExist == ASWGLOBAL::BOOL::FALSE)
    {
      l_intArrayPosition = l_arrIndexes.ElementAt( 1 -1);
      DevGetSequenceRef(ML_STAR, l_arrSequenceNames.ElementAt( l_intArrayPosition -1), i_seqCOREGripper);
      SeqRemoveAll(t_seqGripperPaddles);
      SeqCopySequence(t_seqGripperPaddles, i_seqCOREGripper);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Sequence handed over to submethod library:  "), l_arrSequenceNames.ElementAt( l_intArrayPosition -1));
    }
    l_arrIndexes.SetSize(0);
    l_arrIndexes = HSLExtensions::Array::FindValue(l_arrSequenceNames, Translate("VStarCOREGripTool_0001"));
    l_blnCOREGripDoNotExist = HSLExtensions::Array::IsEmpty(l_arrIndexes);
    if (l_blnCOREGripDoNotExist == ASWGLOBAL::BOOL::FALSE)
    {
      l_intArrayPosition = l_arrIndexes.ElementAt( 1 -1);
      DevGetSequenceRef(ML_STAR, l_arrSequenceNames.ElementAt( l_intArrayPosition -1), i_seqCOREGripper);
      SeqRemoveAll(t_seqGripperPaddles);
      SeqCopySequence(t_seqGripperPaddles, i_seqCOREGripper);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Sequence handed over to submethod library:  "), l_arrSequenceNames.ElementAt( l_intArrayPosition -1));
    }
    l_arrIndexes.SetSize(0);
    l_arrIndexes = HSLExtensions::Array::FindValue(l_arrSequenceNames, Translate("TipSupport_0001"));
    l_blnTipSupportDoNotExist = HSLExtensions::Array::IsEmpty(l_arrIndexes);
    if (l_blnTipSupportDoNotExist == ASWGLOBAL::BOOL::FALSE)
    {
      l_intArrayPosition = l_arrIndexes.ElementAt( 1 -1);
      DevGetSequenceRef(ML_STAR, l_arrSequenceNames.ElementAt( l_intArrayPosition -1), i_seqTipSupport);
      SeqRemoveAll(seq_TipSupport);
      SeqCopySequence(t_seqTipSupport, i_seqTipSupport);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Sequence handed over to submethod library:  "), l_arrSequenceNames.ElementAt( l_intArrayPosition -1));
    }
    l_arrIndexes.SetSize(0);
    t_blnSkipPipetting = i_blnSkipPipetting;
    t_blnSimulationMode = i_blnSimulationMode;
    t_intReaderPosition = i_intReaderPosition;
    t_intForkID = 0;
    if( 0 == t_eventWaitForParallel.SetEvent() )
    {
          MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function TIP_TipConsolidation( device & ML_STAR ) void {
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    STAR_TIP_TOOLS::DefragTipRacks1mL(ML_STAR, t_seqTips1000uL);
    STAR_TIP_TOOLS::DefragTipRacks1mL(ML_STAR, t_seqTips300uL);
    STAR_TIP_TOOLS::DefragTipRacks1mL(ML_STAR, t_seqTips50uL);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, t_seqTips1000uL, t_strTipCounter1000uL);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, t_seqTips300uL, t_strTipCounter300uL);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, t_seqTips50uL, t_strTipCounter50uL);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_CleanUpTipAdapter( device & ML_STAR ) void {
    private variable l_intTipTypeOnAdapter;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    MECC::TraceComment(Translate("======================================================================\nDetermine Tip Type on Tip Adapter\n======================================================================"));
    l_intTipTypeOnAdapter = DevGetLabwareData(ML_STAR, Translate("TipSupport_0001"), Translate("MlStarCore96TipRack"));
    l_intTipTypeOnAdapter = StrIVal(l_intTipTypeOnAdapter);
    MECC::TraceComment(Translate("======================================================================\nClean Up Offset\n======================================================================"));
    if (l_intTipTypeOnAdapter < 0)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Tip Adapter Cleanup: "), Translate(" No tips on tip adapter"), Translate(""), Translate(""));
      return;
    }
    if (l_intTipTypeOnAdapter == 1)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Tip Adapter Cleanup: "), Translate(" Cleaning 300F Tips"), Translate(""), Translate(""));
      STAR_MPH96_TOOLS::TIP_OFFSET_CleanUpTips_Column(ML_STAR, t_seqTips300uL, t_seqTipSupport, t_strTipCounter300uL);
      if(0){
        STAR_MPH96_TOOLS::TIP_OFFSET_CleanUpTips_Column2(ML_STAR, t_seqTips300uL, t_seqTipSupport, t_strTipCounter300uL);
      }
    }
    if (l_intTipTypeOnAdapter == 5)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Tip Adapter Cleanup: "), Translate(" Cleaning 1000F Tips"), Translate(""), Translate(""));
      if(0){
        STAR_MPH96_TOOLS::TIP_OFFSET_CleanUpTips_Column(ML_STAR, t_seqTips1000uL, t_seqTipSupport, t_strTipCounter1000uL);
      }
      STAR_MPH96_TOOLS::TIP_OFFSET_CleanUpTips_Column2(ML_STAR, t_seqTips1000uL, t_seqTipSupport, t_strTipCounter1000uL);
    }
    if (l_intTipTypeOnAdapter == 23)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Tip Adapter Cleanup: "), Translate(" Cleaning 50F Tips"), Translate(""), Translate(""));
      STAR_MPH96_TOOLS::TIP_OFFSET_CleanUpTips_Column(ML_STAR, t_seqTips50uL, t_seqTipSupport, t_strTipCounter50uL);
      if(0){
        STAR_MPH96_TOOLS::TIP_OFFSET_CleanUpTips_Column2(ML_STAR, t_seqTips50uL, t_seqTipSupport, t_strTipCounter50uL);
      }
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_SupernatentRemoval( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_strLiquidClass1, variable i_strLiquidClass2, variable i_fltTotalVolumeInWells, variable i_fltAdditionalRemoval, variable i_strTrackingFileStatus ) void {
    private variable l_fltMaxAspiration;
    private variable l_fltFirstRemovalVolume;
    private variable l_fltContainerClearance;
    private variable l_fltDispenseHeight;
    private variable l_fltSecondRemovalVolume;
    private variable l_fltContainerDepth;
    private variable l_intTipType;
    private variable l_fltMaxVolume;
    private variable l_fltFinalRemovalVolume;
    private variable l_intAdditionRound;
    private variable l_intTotalPositions;
    private variable l_strChannelPattern;
    private sequence l_seqAsp;
    private variable l_intTotalChannels;
    private sequence l_seqAdoptedAspirationPosition;
    private sequence l_seqAdoptedDispensePosition;
    private sequence l_seqDisp;
    private variable l_strAspReturn;
    private variable l_strDspReturn;
    private timer l_hdlEthanolCollectTimer;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    STAR_TIP_TOOLS::Get1mLChannelCount(ML_STAR, l_intTotalChannels);
    _MatchAspirationToDispenseSequence(i_seqAspirationPosition, i_seqDispensePosition, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     First Liquid Class:  "), i_strLiquidClass1, Translate("\R     Second Liquid Class:  "), i_strLiquidClass2, Translate("\R     Total Volume in Wells:  "), i_fltTotalVolumeInWells, Translate("\R     Additional Volume to Remove:  "), i_fltAdditionalRemoval, Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass1, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is for unknown tip type for this framework"), Translate("Please check liquid class for tip type usage"));
    }
    l_fltMaxAspiration = i_fltTotalVolumeInWells + i_fltAdditionalRemoval;
    if (l_fltMaxAspiration > l_fltMaxVolume)
    {
      l_fltFirstRemovalVolume = l_fltMaxAspiration - l_fltMaxVolume;
      l_fltFirstRemovalVolume = l_fltFirstRemovalVolume + 100.0;
    }
    l_fltFinalRemovalVolume = i_fltAdditionalRemoval;
    l_fltSecondRemovalVolume = i_fltTotalVolumeInWells - l_fltFinalRemovalVolume;
    if (l_fltSecondRemovalVolume < 0.0)
    {
      l_fltSecondRemovalVolume = 0.0;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     First Volume to Remove:  "), l_fltFirstRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Second Volume to Remove:  "), l_fltSecondRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Final Volume to Remove:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
    LPQ::CONT_GetContainerDepth(ML_STAR, i_seqDispensePosition, ASWGLOBAL::BOOL::FALSE, l_fltContainerDepth, l_fltContainerClearance);
    l_fltDispenseHeight = l_fltContainerDepth - 5.0;
    l_intTotalPositions = SeqGetTotal(l_seqAdoptedAspirationPosition);
    {
      l_intAdditionRound = 0;
      while (l_intTotalPositions > 0)
      {
        l_intAdditionRound = l_intAdditionRound + 1;
        l_intTotalPositions = STAR_CHANNEL_TOOLS::CHAN_ACCESS_Sort2Sequences(ML_STAR, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition, 0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_intTotalChannels, l_seqAsp, l_seqDisp, l_strChannelPattern);
        MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
        _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
        if (l_fltFirstRemovalVolume > 0.0)
        {
          MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads\n================================================================="));
          LPQ::ADJUST_SetRelativePosition(ML_STAR, l_seqAsp, 0.0, 0.0, 3.0, 0.0);
          MECC::TraceComment(Translate("=================================================================\nInitial removal of liquid\n================================================================="));
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            	l_strAspReturn = arrRetValues[2];
          }
          DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, l_strAspReturn, Translate(""), Translate(""), i_strLiquidClass1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
          MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
          LPQ::ADJUST_SetRelativePosition(ML_STAR, l_seqAsp, 0.0, 0.0, -3.0, 0.0);
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            	l_strDspReturn = arrRetValues[2];
          }
          DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
        }
        if (l_fltSecondRemovalVolume > 0.0)
        {
          MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads\n================================================================="));
          LPQ::ADJUST_SetRelativePosition(ML_STAR, l_seqAsp, 0.0, 0.0, 2.5, 0.0);
          MECC::TraceComment(Translate("=================================================================\nInitial removal of liquid\n================================================================="));
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            	l_strAspReturn = arrRetValues[2];
          }
          DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, l_strAspReturn, Translate(""), Translate(""), i_strLiquidClass1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
          MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
          LPQ::ADJUST_SetRelativePosition(ML_STAR, l_seqAsp, 0.0, 0.0, -2.5, 0.0);
        }
        if(0){
          DATACONTROLLER::TIME_TimerStart(5, Translate("EthanolCollectTimer"), ASWGLOBAL::BOOL::TRUE, l_hdlEthanolCollectTimer);
        }
        MECC::TraceComment(Translate("=================================================================\nFinal removal of liquid\n================================================================="));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	l_strAspReturn = arrRetValues[2];
        }
        DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, l_strAspReturn, Translate(""), Translate(""), i_strLiquidClass2, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	l_strDspReturn = arrRetValues[2];
        }
        DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass2, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, i_seqAspirationPosition);
    {
      variable _FilterIdsArray_4[];
      variable _ColumnIdsArray_4[];
      variable _ColumnNamesArray_4[];
      variable _ExperimentsArray_4[];
      _FilterIdsArray_4.SetSize(0);
      _ColumnNamesArray_4.SetSize(14);
      _ColumnIdsArray_4.SetSize(14);
      _ColumnNamesArray_4.SetAt(0, "RecordId");
      _ColumnIdsArray_4.SetAt(0, 0);
      _ColumnNamesArray_4.SetAt(1, "TRackBC");
      _ColumnIdsArray_4.SetAt(1, 1);
      _ColumnNamesArray_4.SetAt(2, "TLabwareId");
      _ColumnIdsArray_4.SetAt(2, 2);
      _ColumnNamesArray_4.SetAt(3, "TPositionId");
      _ColumnIdsArray_4.SetAt(3, 3);
      _ColumnNamesArray_4.SetAt(4, "TPositionBC");
      _ColumnIdsArray_4.SetAt(4, 4);
      _ColumnNamesArray_4.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_4.SetAt(5, 5);
      _ColumnNamesArray_4.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_4.SetAt(6, 6);
      _ColumnNamesArray_4.SetAt(7, "TVolume");
      _ColumnIdsArray_4.SetAt(7, 7);
      _ColumnNamesArray_4.SetAt(8, "SRackBC");
      _ColumnIdsArray_4.SetAt(8, 8);
      _ColumnNamesArray_4.SetAt(9, "SLabwareId");
      _ColumnIdsArray_4.SetAt(9, 9);
      _ColumnNamesArray_4.SetAt(10, "SPositionId");
      _ColumnIdsArray_4.SetAt(10, 10);
      _ColumnNamesArray_4.SetAt(11, "SPositionBC");
      _ColumnIdsArray_4.SetAt(11, 11);
      _ColumnNamesArray_4.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_4.SetAt(12, 12);
      _ColumnNamesArray_4.SetAt(13, "UserName");
      _ColumnIdsArray_4.SetAt(13, 13);
      _ExperimentsArray_4.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, i_seqDispensePosition, 1, _FilterIdsArray_4, 0, _ColumnIdsArray_4, _ColumnNamesArray_4, _ExperimentsArray_4, t_strMappingFileName, 0, 1, t_strMappingFileDirectory, 1);
    }
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  private function _PickUpTipsBasedOnTipType( device & ML_STAR, variable i_strChannelPattern, variable i_intTipType ) void {
    private variable l_intNumberOfTipsPickedUp;
    l_intNumberOfTipsPickedUp = StrReplace(i_strChannelPattern, Translate("1"), Translate("1"));
    if (i_intTipType == 5)
    {
      STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, t_seqTips1000uL, t_strTipCounter1000uL, i_strChannelPattern);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, t_seqTips1000uL, t_strTipCounter1000uL);
      STAR_TIP_TOOLS::TipCountNeeded_Add(t_strTipCounter1000uL, l_intNumberOfTipsPickedUp);
    }
    if (i_intTipType == 1)
    {
      STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, t_seqTips300uL, t_strTipCounter300uL, i_strChannelPattern);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, t_seqTips300uL, t_strTipCounter300uL);
      STAR_TIP_TOOLS::TipCountNeeded_Add(t_strTipCounter300uL, l_intNumberOfTipsPickedUp);
    }
    if (i_intTipType == 23)
    {
      STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, t_seqTips50uL, t_strTipCounter50uL, i_strChannelPattern);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, t_seqTips50uL, t_strTipCounter50uL);
      STAR_TIP_TOOLS::TipCountNeeded_Add(t_strTipCounter50uL, l_intNumberOfTipsPickedUp);
    }
  }

  private function _PickUpTipsBasedOnTipTypeMPH96( device & ML_STAR, variable i_intTotalSamples, variable i_intTipType ) variable {
    private variable l_intTotalColumns;
    private variable l_intRemainder;
    private variable l_intNumberOfTipsPickedUp;
    private variable l_strReturn3Tip;
    private variable l_intTipTypeOnAdapter;
    l_intTipTypeOnAdapter = DevGetLabwareData(ML_STAR, Translate("TipSupport_0001"), Translate("MlStarCore96TipRack"));
    l_intTipTypeOnAdapter = StrIVal(l_intTipTypeOnAdapter);
    if (l_intTipTypeOnAdapter != i_intTipType)
    {
      PIP_CleanUpTipAdapter(ML_STAR);
    }
    l_intTotalColumns = i_intTotalSamples / (8 * 1.0);
    l_intRemainder = i_intTotalSamples % 8;
    if (l_intRemainder > 0)
    {
      l_intTotalColumns = l_intTotalColumns + 1;
    }
    l_intNumberOfTipsPickedUp = l_intTotalColumns * 8;
    if (i_intTipType == 5)
    {
      l_strReturn3Tip = STAR_MPH96_TOOLS::TIP_OFFSET_PickUpTips_Column(ML_STAR, t_seqTips1000uL, t_seqTipSupport, l_intTotalColumns, t_strTipCounter1000uL, ASWGLOBAL::BOOL::TRUE);
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, t_seqTips1000uL, t_strTipCounter1000uL);
      STAR_TIP_TOOLS::TipCountNeeded_Add(t_strTipCounter1000uL, l_intNumberOfTipsPickedUp);
    }
    if (i_intTipType == 1)
    {
      l_strReturn3Tip = STAR_MPH96_TOOLS::TIP_OFFSET_PickUpTips_Column(ML_STAR, t_seqTips300uL, t_seqTipSupport, l_intTotalColumns, t_strTipCounter300uL, ASWGLOBAL::BOOL::TRUE);
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, t_seqTips300uL, t_strTipCounter300uL);
      STAR_TIP_TOOLS::TipCountNeeded_Add(t_strTipCounter300uL, l_intNumberOfTipsPickedUp);
    }
    if (i_intTipType == 23)
    {
      l_strReturn3Tip = STAR_MPH96_TOOLS::TIP_OFFSET_PickUpTips_Column(ML_STAR, t_seqTips50uL, t_seqTipSupport, l_intTotalColumns, t_strTipCounter50uL, ASWGLOBAL::BOOL::TRUE);
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, t_seqTips50uL, t_strTipCounter50uL);
      STAR_TIP_TOOLS::TipCountNeeded_Add(t_strTipCounter50uL, l_intNumberOfTipsPickedUp);
    }
    return (l_strReturn3Tip);
  }

  function TIP_EditTipSequences( device & ML_STAR, variable i_blnEditable, variable i_intTipsNeeded1000uL, variable i_intTipsNeeded300uL, variable i_intTipsNeeded50uL ) void {
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (i_intTipsNeeded1000uL > 0)
    {
      MECC::TraceComment(Translate("======================================================================\nEdit 1000uL Tips\n======================================================================"));
      if (i_blnEditable == ASWGLOBAL::BOOL::TRUE)
      {
        STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, t_seqTips1000uL, t_strTipCounter1000uL, 9999);
      }
      else
      {
        STAR_TIP_TOOLS::TipCounter_SetShow(ML_STAR, t_seqTips1000uL, i_intTipsNeeded1000uL, 99999, 1, i_intTipsNeeded1000uL);
      }
      if(0){
        STAR_TIP_TOOLS::TipCheck(ML_STAR, t_seqTips1000uL, t_strTipCounter1000uL, i_intTipsNeeded1000uL);
      }
    }
    if (i_intTipsNeeded300uL > 0)
    {
      MECC::TraceComment(Translate("======================================================================\nEdit 300uL Tips\n======================================================================"));
      if (i_blnEditable == ASWGLOBAL::BOOL::TRUE)
      {
        STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, t_seqTips300uL, t_strTipCounter300uL, 9999);
      }
      else
      {
        STAR_TIP_TOOLS::TipCounter_SetShow(ML_STAR, t_seqTips300uL, t_strTipCounter300uL, 99999, 1, i_intTipsNeeded300uL);
      }
      if(0){
        STAR_TIP_TOOLS::TipCheck(ML_STAR, t_seqTips300uL, t_strTipCounter300uL, i_intTipsNeeded300uL);
      }
    }
    if (i_intTipsNeeded50uL > 0)
    {
      MECC::TraceComment(Translate("======================================================================\nEdit 50uL Tips\n======================================================================"));
      if (i_blnEditable == ASWGLOBAL::BOOL::TRUE)
      {
        STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, t_seqTips50uL, t_strTipCounter50uL, 9999);
      }
      else
      {
        STAR_TIP_TOOLS::TipCounter_SetShow(ML_STAR, t_seqTips50uL, t_strTipCounter50uL, 99999, 1, i_intTipsNeeded50uL);
      }
      if(0){
        STAR_TIP_TOOLS::TipCheck(ML_STAR, t_seqTips50uL, t_strTipCounter50uL, i_intTipsNeeded50uL);
      }
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  private function _DetermineTipTypeFromLiquidClass( variable i_strLiquidClass, variable & o_intTipType, variable & o_fltMaxVolume ) void {
    o_intTipType = 0;
    o_fltMaxVolume = 0;
    MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(i_strLiquidClass);
    o_intTipType = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
    o_fltMaxVolume = 0.0;
    if (o_intTipType == 5)
    {
      o_fltMaxVolume = 1000.0;
    }
    if (o_intTipType == 1)
    {
      o_fltMaxVolume = 300.0;
    }
    if (o_intTipType == 23)
    {
      o_fltMaxVolume = 50.0;
    }
  }

  function PIP_MPH_RemoveSupernatant( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqLiquidWastePosition, variable i_strLiquidClass1, variable i_strLiquidClass2, variable i_fltTotalVolumeInWells, variable i_fltAdditionalRemoval, variable i_strTrackingFileStatus ) void {
    private variable l_fltMaxAspiration;
    private variable l_fltFirstRemovalVolume;
    private variable l_fltContainerClearance;
    private variable l_fltDispenseHeight;
    private variable l_fltSecondRemovalVolume;
    private variable l_fltContainerDepth;
    private variable l_intTipType;
    private variable l_fltMaxVolume;
    private variable l_fltFinalRemovalVolume;
    private variable l_intCurrentPosition;
    private variable l_intEndPosition;
    private variable l_intNumberOfSamples;
    private variable l_intCurrentPositionTipSupport;
    private variable l_strAspReturn3;
    private variable l_strAspReturn4;
    private variable l_strDspReturn3;
    private variable l_strDspReturn4;
    private variable l_strReturn3Tip;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqAspirationPosition.GetCurrentPosition();
      l_intEndPosition = i_seqAspirationPosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     First Liquid Class:  "), i_strLiquidClass1, Translate("\R     Second Liquid Class:  "), i_strLiquidClass2, Translate("\R     Total Samples:  "), l_intNumberOfSamples, Translate("\R     Total Volume in Wells:  "), i_fltTotalVolumeInWells, Translate("\R     Additional Volume to Remove:  "), i_fltAdditionalRemoval);
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass1, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is for unknown tip type for this framework"), Translate("Please check liquid class for tip type usage"));
    }
    l_fltMaxAspiration = i_fltTotalVolumeInWells + i_fltAdditionalRemoval;
    if (l_fltMaxAspiration > l_fltMaxVolume)
    {
      l_fltFirstRemovalVolume = l_fltMaxAspiration - l_fltMaxVolume;
      l_fltFirstRemovalVolume = l_fltFirstRemovalVolume + 100.0;
    }
    l_fltFinalRemovalVolume = i_fltAdditionalRemoval;
    l_fltSecondRemovalVolume = i_fltTotalVolumeInWells - l_fltFinalRemovalVolume;
    if (l_fltSecondRemovalVolume < 0.0)
    {
      l_fltSecondRemovalVolume = 0.0;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     First Volume to Remove:  "), l_fltFirstRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Second Volume to Remove:  "), l_fltSecondRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Final Volume to Remove:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
    if(0){
      l_fltMaxAspiration = i_fltTotalVolumeInWells + i_fltAdditionalRemoval;
      if (l_fltMaxAspiration > l_fltMaxVolume)
      {
        l_fltFirstRemovalVolume = l_fltMaxAspiration - l_fltMaxVolume;
        l_fltFirstRemovalVolume = l_fltFirstRemovalVolume + 100.0;
      }
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Additional Volume to Remove:  "), i_fltAdditionalRemoval, Translate(" uL"), Translate(""));
      l_fltFinalRemovalVolume = i_fltAdditionalRemoval;
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("     Final Removal Volume:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
      l_fltSecondRemovalVolume = i_fltTotalVolumeInWells - l_fltFinalRemovalVolume;
      if (l_fltSecondRemovalVolume < 0.0)
      {
        l_fltSecondRemovalVolume = 0.0;
      }
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     First Volume to Remove:  "), l_fltFirstRemovalVolume, Translate(" uL"), Translate(""));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Second Volume to Remove:  "), l_fltSecondRemovalVolume, Translate(" uL"), Translate(""));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Final Volume to Remove:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
    }
    LPQ::CONT_GetContainerDepth(ML_STAR, i_seqLiquidWastePosition, ASWGLOBAL::BOOL::FALSE, l_fltContainerDepth, l_fltContainerClearance);
    l_fltDispenseHeight = l_fltContainerDepth - 5.0;
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    if (l_fltFirstRemovalVolume > 0.0)
    {
      ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
      MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqAspirationPosition, 0.0, 0.0, 3.0, 0.0);
      MECC::TraceComment(Translate("=================================================================\nInitial removal of liquid\n================================================================="));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqAspirationPosition, 0.0, 0.0, -3.0, 0.0);
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        	l_strDspReturn3 = arrRetValues[2];
        	l_strDspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nAspirate from waste again to prevent bubbles\n================================================================="));
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass1, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass1, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant to Waste"));
    }
    ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
    if (l_fltSecondRemovalVolume > 0.0)
    {
      MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqAspirationPosition, 0.0, 0.0, 2.5, 0.0);
      MECC::TraceComment(Translate("=================================================================\nInitial removal of liquid\n================================================================="));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), Translate(""), i_strLiquidClass1, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
      MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqAspirationPosition, 0.0, 0.0, -2.5, 0.0);
    }
    MECC::TraceComment(Translate("=================================================================\nFinal removal of liquid\n================================================================="));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass2, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass2, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
    MECC::TraceComment(Translate("=================================================================\nAspirate from waste again to prevent bubbles\n================================================================="));
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MultiDispense( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_strLiquidClass, variable i_fltVolume, variable i_fltPreDispenseVolume, variable i_fltPostDispenseVolume, variable i_fltDispenseHeight, variable i_strTrackingFileStatus ) void {
    private variable l_strChannelPattern;
    private variable l_intTipType;
    private variable l_fltMaxVolume;
    private sequence l_seqAdoptedAspirationPosition;
    private variable l_fltMaxReagentVolume;
    private variable l_intMaxDispensesPerChannel;
    private variable l_intRemainder;
    private variable l_intTotalChannels;
    private variable l_intAspirationRounds;
    private variable l_intTotalDispensesAllChannels;
    private variable l_intTotalWells;
    private variable l_intRemainingWells;
    private variable l_intPartialLoop;
    private variable l_intPartialIndex;
    private variable l_intAdjustedIndex;
    private variable l_intChannelIndex;
    private variable l_intDispenseCount;
    private variable l_intDispIndex;
    private variable l_blnProgressSequence;
    private variable l_strAspReturn;
    private variable l_fltAspirationVolume;
    private variable l_fltLiquidLevel;
    private variable l_strLiqReturn;
    private variable l_intActiveChannels;
    private variable l_strDspReturn;
    private variable l_intAspirationIndex;
    private variable l_arrDispenseHeights[];
    private variable l_arrPartialPatterns[];
    private variable l_fltSourceDepth;
    private variable l_fltNotUsed;
    private variable l_fltDestDepth;
    private variable l_fltDispenseHeight;
    private variable l_intTotalWellsAspiration;
    private variable l_intEndPosition;
    private variable l_intCurrentPosition;
    private sequence l_seqAdoptedDestinationPosition;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    STAR_TIP_TOOLS::Get1mLChannelCount(ML_STAR, l_intTotalChannels);
    l_intCurrentPosition = i_seqAspirationPosition.GetCurrentPosition();
    l_intEndPosition = i_seqAspirationPosition.GetCount();
    l_intTotalWellsAspiration = l_intEndPosition - l_intCurrentPosition;
    l_intTotalWellsAspiration = l_intTotalWellsAspiration + 1;
    _MatchAspirationToDispenseSequence(i_seqAspirationPosition, i_seqDispensePosition, l_seqAdoptedAspirationPosition, l_seqAdoptedDestinationPosition);
    l_intCurrentPosition = i_seqDispensePosition.GetCurrentPosition();
    l_intEndPosition = i_seqDispensePosition.GetCount();
    l_intTotalWells = l_intEndPosition - l_intCurrentPosition;
    l_intTotalWells = l_intTotalWells + 1;
    LPQ::CONT_GetContainerDepth(ML_STAR, i_seqAspirationPosition, ASWGLOBAL::BOOL::FALSE, l_fltSourceDepth, l_fltNotUsed);
    LPQ::CONT_GetContainerDepth(ML_STAR, i_seqDispensePosition, ASWGLOBAL::BOOL::FALSE, l_fltDestDepth, l_fltNotUsed);
    l_fltDispenseHeight = i_fltDispenseHeight;
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r     Transfer Volume:  "), i_fltVolume, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    l_fltMaxReagentVolume = l_fltMaxVolume - i_fltPostDispenseVolume;
    l_fltMaxReagentVolume = l_fltMaxReagentVolume - i_fltPreDispenseVolume;
    l_intMaxDispensesPerChannel = l_fltMaxReagentVolume / i_fltVolume;
    l_intMaxDispensesPerChannel = MthFloor(l_intMaxDispensesPerChannel);
    l_intTotalDispensesAllChannels = l_intMaxDispensesPerChannel * l_intTotalChannels;
    TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, Translate("     l_fltMaxVolume:  "), l_fltMaxVolume, Translate("\r     l_fltMaxReagentVolume:  "), l_fltMaxReagentVolume, Translate("\r     l_intMaxDispensesPerChannel:  "), l_intMaxDispensesPerChannel, Translate("\r     l_intTotalChannels:  "), l_intTotalChannels, Translate("\r     l_intTotalDispensesAllChannels:  "), l_intTotalDispensesAllChannels);
    l_intAspirationRounds = l_intTotalWells / l_intTotalDispensesAllChannels;
    l_intAspirationRounds = MthFloor(l_intAspirationRounds);
    l_intRemainder = l_intTotalWells % l_intTotalDispensesAllChannels;
    if (l_intRemainder > 0)
    {
      l_intAspirationRounds = l_intAspirationRounds + 1;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Aspiration Rounds Needed:  "), l_intAspirationRounds, Translate(""), Translate(""));
    STAR_TIP_TOOLS::BuildChannelPattern(l_intTotalChannels, l_intTotalChannels, l_strChannelPattern);
    l_intRemainingWells = l_intTotalWells;
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("     l_intRemainingWells:  "), l_intRemainingWells);
    ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
    {
      for(l_intAspirationIndex = 0; l_intAspirationIndex < l_intAspirationRounds;)
      {
        l_intAspirationIndex = l_intAspirationIndex + 1;
        l_intDispenseCount = l_intRemainingWells / l_intTotalChannels;
        l_intDispenseCount = MthFloor(l_intDispenseCount);
        l_intRemainder = l_intRemainingWells % l_intTotalChannels;
        if (l_intRemainder > 0)
        {
          l_intDispenseCount = l_intDispenseCount + 1;
        }
        if (l_intDispenseCount > l_intMaxDispensesPerChannel)
        {
          l_intDispenseCount = l_intMaxDispensesPerChannel;
        }
        l_fltAspirationVolume = i_fltVolume * l_intDispenseCount;
        if (i_fltPostDispenseVolume > 0.0)
        {
          l_fltAspirationVolume = l_fltAspirationVolume + i_fltPostDispenseVolume;
        }
        if (i_fltPreDispenseVolume > 0.0)
        {
          l_fltAspirationVolume = l_fltAspirationVolume + i_fltPreDispenseVolume;
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Remaining Wells:  "), l_intRemainingWells);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Aspiration Volume:  "), l_fltAspirationVolume);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Dispense Count:  "), l_intDispenseCount);
        _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
        _GetPartialChannelPatternForAspiration(ML_STAR, l_strChannelPattern, l_intTotalWellsAspiration, l_intPartialLoop, l_arrPartialPatterns);
        l_arrDispenseHeights.SetSize(0);
        {
          for(l_intChannelIndex = 0; l_intChannelIndex < l_intTotalChannels;)
          {
            l_intChannelIndex = l_intChannelIndex + 1;
            l_arrDispenseHeights.AddAsLast(0.0);
          }
        }
        MECC::TraceComment(Translate("======================================================================\nAspirate Reagent and pre dispense\n======================================================================"));
        {
          for(l_intPartialIndex = 0; l_intPartialIndex < l_intPartialLoop;)
          {
            l_intPartialIndex = l_intPartialIndex + 1;
            l_strDspReturn = Translate("");
            MECC::TraceComment(Translate("======================================================================\nAspirate Reagent\n======================================================================"));
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	l_strAspReturn = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
              	l_strLiqReturn = arrRetValues[2];
            }
            l_intActiveChannels = StrReplace(l_arrPartialPatterns.ElementAt( l_intPartialIndex -1), Translate("1"), Translate("1"));
            {
              for(l_intChannelIndex = 0; l_intChannelIndex < l_intActiveChannels;)
              {
                l_intChannelIndex = l_intChannelIndex + 1;
                l_intAdjustedIndex = l_intPartialIndex - 1;
                l_intAdjustedIndex = l_intAdjustedIndex * l_intActiveChannels;
                l_intAdjustedIndex = l_intAdjustedIndex + l_intChannelIndex;
                STAR_CHANNEL_TOOLS::LIQUID_LEVEL_GetLiquidLevelHeight(ML_STAR, l_strLiqReturn, l_seqAdoptedAspirationPosition, l_intAdjustedIndex, l_fltLiquidLevel);
                l_arrDispenseHeights.SetAt(l_intAdjustedIndex-1, l_fltLiquidLevel);
              }
            }
            Util2::Debug::TraceArray(Translate("Dispense Heights"), l_arrDispenseHeights);
            DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, l_strAspReturn, Translate(""), l_strLiqReturn, i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
            if (i_fltPreDispenseVolume > 0.0)
            {
              MECC::TraceComment(Translate("======================================================================\nPre-Dispense\n======================================================================"));
              l_blnProgressSequence = 0;
              if (i_fltPostDispenseVolume == 0.0)
              {
                l_blnProgressSequence = 1;
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strDspReturn = arrRetValues[2];
              }
            }
            DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
          }
        }
        MECC::TraceComment(Translate("======================================================================\nMulti-Dispense\n======================================================================"));
        {
          l_intDispIndex = 0;
          while (
             (i_seqDispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seqDispensePosition, 1);
            l_intDispIndex = l_intDispIndex + 1;
            if (l_intDispIndex > l_intDispenseCount)
            {
              break;
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	l_strDspReturn = arrRetValues[2];
            }
            DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
            if (
               (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
        }
        MECC::TraceComment(Translate("======================================================================\nPost-Dispense\n======================================================================"));
        {
          for(l_intPartialIndex = 0; l_intPartialIndex < l_intPartialLoop;)
          {
            l_intPartialIndex = l_intPartialIndex + 1;
            if (i_fltPreDispenseVolume > 0.0)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strDspReturn = arrRetValues[2];
              }
              DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
            }
          }
        }
        MECC::TraceComment(Translate("======================================================================\nEject\n======================================================================"));
        if(0){
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  private function _GetPartialChannelPatternForAspiration( device & ML_STAR, variable i_strTargetChannelPattern, variable i_intTotalTubes, variable & o_intLoopNumber, variable & o_arrChannelPatterns[] ) void {
    private variable l_intShiftNumber;
    private variable l_strChannelPattern;
    private variable l_intRemainder;
    private variable l_intTotalChannels;
    private variable l_intChannelNumber;
    private variable l_strChannelPattern2;
    private variable l_intRemainingChannels;
    private variable l_intTotalChannelsNeeded;
    private variable l_intLoopCounter;
    private variable l_intCheck;
    o_intLoopNumber = 0;
    o_arrChannelPatterns.SetSize( 0);
    STAR_TIP_TOOLS::Get1mLChannelCount(ML_STAR, l_intTotalChannels);
    o_intLoopNumber = 0;
    o_arrChannelPatterns.SetSize(0);
    l_intTotalChannelsNeeded = StrReplace(i_strTargetChannelPattern, Translate("1"), Translate("1"));
    o_intLoopNumber = l_intTotalChannels / i_intTotalTubes;
    o_intLoopNumber = MthFloor(o_intLoopNumber);
    l_intRemainder = l_intTotalChannels % i_intTotalTubes;
    if (l_intRemainder > 0)
    {
      o_intLoopNumber = o_intLoopNumber + 1;
    }
    l_intRemainingChannels = l_intTotalChannelsNeeded;
    l_intShiftNumber = 0;
    {
      for(l_intLoopCounter = 0; l_intLoopCounter < o_intLoopNumber;)
      {
        l_intLoopCounter = l_intLoopCounter + 1;
        l_strChannelPattern = Translate("");
        l_strChannelPattern2 = Translate("");
        l_intShiftNumber = (l_intLoopCounter - 1) * i_intTotalTubes;
        l_intChannelNumber = i_intTotalTubes;
        if (l_intRemainingChannels < l_intChannelNumber)
        {
          l_intChannelNumber = l_intRemainingChannels;
        }
        l_strChannelPattern = StrFillLeft(l_strChannelPattern, Translate("0"), l_intShiftNumber);
        l_strChannelPattern2 = StrFillLeft(l_strChannelPattern2, Translate("1"), l_intChannelNumber);
        l_intRemainingChannels = l_intRemainingChannels - i_intTotalTubes;
        l_strChannelPattern = StrConcat2(l_strChannelPattern, l_strChannelPattern2);
        l_strChannelPattern = StrFillRight(l_strChannelPattern, Translate("0"), l_intTotalChannels);
        l_intCheck = StrReplace(l_strChannelPattern, Translate("1"), Translate("1"));
        if (l_intCheck > 0)
        {
          o_arrChannelPatterns.AddAsLast(l_strChannelPattern);
        }
      }
    }
    o_intLoopNumber=o_arrChannelPatterns.GetSize();
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Input Channel Pattern:  "), i_strTargetChannelPattern);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Total Tubes:  "), i_intTotalTubes);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Aspiration Loop Number:  "), o_intLoopNumber);
    Util2::Debug::TraceArray(Translate("Channel Patterns"), o_arrChannelPatterns);
  }

  private function _DATA_GetLabwareIDAndSequenceNamesFromDeck( device & ML_STAR, variable & o_arrLabwareNames[], variable & o_arrSequenceNames[] ) void {
    {
        object obj_Decklayout;
        obj_Decklayout = ML_STAR.GetDeckLayoutObject();
        if (!obj_Decklayout.IsNull())
            {
                  object EditDecklayout5;
                  object Parameter;
                  object LabwareObjects;
                  object LabwareNames;
                  object SequenceNames;
                  variable Array_Keys[];
                  variable i;
                  variable _str_labID;
                  variable _str_seqName;
                  obj_Decklayout.GetObject("IEditDeckLayout5", EditDecklayout5);
                  LabwareObjects.CreateObject("HXPARAMSLib.HxPars");
                  SequenceNames.CreateObject("HXPARAMSLib.HxPars");
                  LabwareNames.CreateObject("HXPARAMSLib.HxPars");
                  //Get Labware IDs
                  obj_Decklayout.TemplateLabwareNames(LabwareObjects);
                  Array_Keys = LabwareObjects.GetKeys();
                  for(i=1; i<=Array_Keys.GetSize(); i++)
                  {
                      LabwareNames = LabwareObjects.Item1(i);
                      _str_labID = LabwareNames.Item1("Labwr_Id");
                      o_arrLabwareNames.AddAsLast(_str_labID);
                  }
                  //Get Sequence Names
                  obj_Decklayout.DeckSequenceNames(SequenceNames);
                  for(i=1; i<=SequenceNames.Count(); i++)
                  {
                       _str_seqName = SequenceNames.Item (i);
                       o_arrSequenceNames.AddAsLast(_str_seqName);
                  }
                  obj_Decklayout.ReleaseObject();
                  EditDecklayout5.ReleaseObject();
                  Parameter.ReleaseObject();
           }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Labware Names:  "), o_arrLabwareNames);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Sequence Names:  "), o_arrSequenceNames);
  }

  function DATA_ReagentVolumeVerification( device & ML_STAR, sequence & i_arrInputSequences[], variable & o_arrVolumesmeasured[] ) void {
    o_arrVolumesmeasured.SetSize( 0);
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    STAR_CHANNEL_TOOLS::LIQUID_LEVEL_MeasureLiquidMulti(ML_STAR, i_arrInputSequences, t_seqTips1000uL, ML_STAR.Waste, t_strTipCounter1000uL, 5, ASWGLOBAL::BOOL::FALSE, o_arrVolumesmeasured);
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  private function _MatchAspirationToDispenseSequence( sequence i_seqAspirationPosition, sequence i_seqDispensePosition, sequence & o_seqAdoptedAspirationPosition, sequence & o_seqAdpotedDispensePosition ) void {
    private variable l_fltNumberOfLoops;
    private variable l_strLabwarePositionDispense;
    private variable l_strLabwareIDAspiration;
    private variable l_strLabwarePositionAspiration;
    private variable l_strLabwareIDDispense;
    private variable l_intCurrentPosition;
    private variable l_intEndPosition;
    private variable l_intGetTotalSequenceAspiration;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable l_intGetTotalSequenceDispense;
    private sequence l_seqAdoptedAspirationPosition;
    private sequence l_seqAdoptedDispensePosition;
    private variable l_intGetTotalSequenceAdoptedAspiration;
    private variable l_intGetTotalSequenceAdoptedDispense;
    { sequence __temp; o_seqAdoptedAspirationPosition = __temp; }
    { sequence __temp; o_seqAdpotedDispensePosition = __temp; }
    _RemoveUsedPositions(i_seqAspirationPosition);
    l_intGetTotalSequenceAspiration = SeqGetTotal(i_seqAspirationPosition);
    if(0){
      l_intCurrentPosition = i_seqAspirationPosition.GetCurrentPosition();
      l_intEndPosition = i_seqAspirationPosition.GetCount();
      l_intGetTotalSequenceAspiration = l_intEndPosition - l_intCurrentPosition;
      l_intGetTotalSequenceAspiration = l_intGetTotalSequenceAspiration + 1;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("     Total Aspiration Positions:  "), l_intGetTotalSequenceAspiration);
    _RemoveUsedPositions(i_seqDispensePosition);
    l_intGetTotalSequenceDispense = SeqGetTotal(i_seqDispensePosition);
    if(0){
      l_intCurrentPosition = i_seqDispensePosition.GetCurrentPosition();
      l_intEndPosition = i_seqDispensePosition.GetCount();
      l_intGetTotalSequenceDispense = l_intEndPosition - l_intCurrentPosition;
      l_intGetTotalSequenceDispense = l_intGetTotalSequenceDispense + 1;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("     Total Dispense Positions:  "), l_intGetTotalSequenceDispense);
    SeqRemoveAll(l_seqAdoptedAspirationPosition);
    SeqRemoveAll(l_seqAdoptedDispensePosition);
    if (l_intGetTotalSequenceAspiration < l_intGetTotalSequenceDispense)
    {
      l_fltNumberOfLoops = l_intGetTotalSequenceDispense / (l_intGetTotalSequenceAspiration * 1.0);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("     Number of Loops:  "), l_fltNumberOfLoops);
      l_fltNumberOfLoops = MthCeiling(l_fltNumberOfLoops);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("     Number of Loops:  "), l_fltNumberOfLoops);
      {
        for(loopCounter1 = 0; loopCounter1 < l_fltNumberOfLoops;)
        {
          loopCounter1 = loopCounter1 + 1;
          {
            loopCounter2 = 0;
            while (
               (i_seqAspirationPosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqAspirationPosition, 1);
              loopCounter2 = loopCounter2 + 1;
              l_strLabwareIDAspiration = SeqGetLabwareId(i_seqAspirationPosition);
              l_strLabwarePositionAspiration = SeqGetPositionId(i_seqAspirationPosition);
              SeqAdd(l_seqAdoptedAspirationPosition, l_strLabwareIDAspiration, l_strLabwarePositionAspiration);
              SeqIncrement(i_seqAspirationPosition, 1);
              TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Added position to aspiration sequence: "), l_strLabwarePositionAspiration);
              l_intCurrentPosition = l_seqAdoptedAspirationPosition.GetCurrentPosition();
              l_intEndPosition = l_seqAdoptedAspirationPosition.GetCount();
              l_intGetTotalSequenceAdoptedAspiration = l_intEndPosition - l_intCurrentPosition;
              l_intGetTotalSequenceAdoptedAspiration = l_intGetTotalSequenceAdoptedAspiration + 0;
              TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("     Total Adopted Aspiration Positions:  "), l_intGetTotalSequenceAdoptedAspiration);
              if (l_intGetTotalSequenceAdoptedAspiration == l_intGetTotalSequenceDispense)
              {
                break;
              }
              if (
                 (i_seqAspirationPosition.GetCurrentPosition() > 0 && i_seqAspirationPosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
            i_seqAspirationPosition.SetCurrentPosition(1);
          }
        }
      }
      SeqResetSequenceIndexes(l_seqAdoptedAspirationPosition);
      SeqCopySequence(o_seqAdoptedAspirationPosition, l_seqAdoptedAspirationPosition);
      SeqCopySequence(o_seqAdpotedDispensePosition, i_seqDispensePosition);
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, o_seqAdoptedAspirationPosition);
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, o_seqAdpotedDispensePosition);
    }
    if (l_intGetTotalSequenceAspiration == l_intGetTotalSequenceDispense)
    {
      SeqCopySequence(o_seqAdoptedAspirationPosition, i_seqAspirationPosition);
      SeqCopySequence(o_seqAdpotedDispensePosition, i_seqDispensePosition);
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, o_seqAdoptedAspirationPosition);
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, o_seqAdpotedDispensePosition);
    }
    if (l_intGetTotalSequenceAspiration > l_intGetTotalSequenceDispense)
    {
      l_fltNumberOfLoops = l_intGetTotalSequenceAspiration / (l_intGetTotalSequenceDispense * 1.0);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("     Number of Loops:  "), l_fltNumberOfLoops);
      l_fltNumberOfLoops = MthCeiling(l_fltNumberOfLoops);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("     Number of Loops:  "), l_fltNumberOfLoops);
      {
        for(loopCounter1 = 0; loopCounter1 < l_fltNumberOfLoops;)
        {
          loopCounter1 = loopCounter1 + 1;
          {
            loopCounter2 = 0;
            while (
               (i_seqDispensePosition.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, i_seqDispensePosition, 1);
              loopCounter2 = loopCounter2 + 1;
              l_strLabwareIDDispense = SeqGetLabwareId(i_seqDispensePosition);
              l_strLabwarePositionDispense = SeqGetPositionId(i_seqDispensePosition);
              SeqIncrement(i_seqDispensePosition, 1);
              SeqAdd(l_seqAdoptedDispensePosition, l_strLabwareIDDispense, l_strLabwarePositionDispense);
              l_intCurrentPosition = l_seqAdoptedDispensePosition.GetCurrentPosition();
              l_intEndPosition = l_seqAdoptedDispensePosition.GetCount();
              l_intGetTotalSequenceAdoptedDispense = l_intEndPosition - l_intCurrentPosition;
              l_intGetTotalSequenceAdoptedDispense = l_intGetTotalSequenceAdoptedDispense + 0;
              TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("     Total Adopted Dispense Positions:  "), l_intGetTotalSequenceAdoptedDispense);
              if (l_intGetTotalSequenceAdoptedDispense == l_intGetTotalSequenceAspiration)
              {
                break;
              }
              if (
                 (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
            i_seqDispensePosition.SetCurrentPosition(1);
          }
        }
      }
      SeqResetSequenceIndexes(l_seqAdoptedDispensePosition);
      SeqCopySequence(o_seqAdpotedDispensePosition, l_seqAdoptedDispensePosition);
      SeqCopySequence(o_seqAdoptedAspirationPosition, i_seqAspirationPosition);
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, o_seqAdoptedAspirationPosition);
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, o_seqAdpotedDispensePosition);
    }
  }

  function TIP_DisplayUsage( device & ML_STAR ) void {
    private variable l_strTipsUsed1000;
    private variable l_strTipsUsed300;
    private variable l_strTipsUsed50;
    private variable l_arrListArray[];
    private variable l_strReturnForTips1000;
    private variable l_strReturnForTips300;
    private variable l_strReturnForTips50;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    STAR_TIP_TOOLS::TipCountNeeded_Get(t_strTipCounter1000uL, l_strTipsUsed1000);
    STAR_TIP_TOOLS::TipCountNeeded_Get(t_strTipCounter300uL, l_strTipsUsed300);
    STAR_TIP_TOOLS::TipCountNeeded_Get(t_strTipCounter50uL, l_strTipsUsed50);
    l_arrListArray.SetSize(0);
    l_strReturnForTips1000 = StrConcat4(Translate("1000F : "), l_strTipsUsed1000, Translate(" tips used"), Translate(""));
    l_strReturnForTips300 = StrConcat4(Translate("300F : "), l_strTipsUsed300, Translate(" tips used"), Translate(""));
    l_strReturnForTips50 = StrConcat4(Translate("50F : "), l_strTipsUsed50, Translate(" tips used"), Translate(""));
    l_arrListArray.AddAsLast(l_strReturnForTips1000);
    l_arrListArray.AddAsLast(l_strReturnForTips300);
    l_arrListArray.AddAsLast(l_strReturnForTips50);
    VectorCustomDialogs::ListDialog(Translate("Tip Calculations"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Tip Usage Calculations for each tip type: "), Translate(""), l_arrListArray);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function TRP_GripperArm( device & ML_STAR, sequence & i_seqSourcePosition, sequence & i_seqDestinationPosition, variable i_blnParkArm, variable i_blnGripOrientation ) void {
    private variable l_strPositionID;
    private variable l_strReturn;
    private variable l_fltGripHeight;
    private variable l_fltGripWidth;
    private variable l_strLabwareIDSource;
    private variable l_fltRackClearanceHeight;
    private variable l_strLabwareIDDestination;
    private variable l_fltRackHeight;
    private variable l_strLabwareID;
    private variable l_fltGripForce;
    private variable l_fltGripOpenWidth;
    private sequence l_seqDestination;
    private sequence l_seqSource;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    l_strLabwareID = SeqGetLabwareId(i_seqDestinationPosition);
    l_fltGripHeight = DevGetLabwareData(ML_STAR, l_strLabwareID, Translate("GripHeight"));
    l_fltGripWidth = DevGetLabwareData(ML_STAR, l_strLabwareID, Translate("GripWidth"));
    l_fltGripOpenWidth = DevGetLabwareData(ML_STAR, l_strLabwareID, Translate("GripOpenWidth"));
    l_fltGripForce = DevGetLabwareData(ML_STAR, l_strLabwareID, Translate("GripForce"));
    l_fltGripHeight = StrFVal(l_fltGripHeight);
    l_fltGripWidth = StrFVal(l_fltGripWidth);
    l_fltGripOpenWidth = StrFVal(l_fltGripOpenWidth);
    l_fltGripForce = StrFVal(l_fltGripForce);
    if (l_fltGripHeight == 0)
    {
      LPQ::LABWARE_GetRackHeight(ML_STAR, i_seqSourcePosition, ASWGLOBAL::BOOL::FALSE, l_fltRackHeight, l_fltRackClearanceHeight);
      l_fltGripHeight = l_fltRackHeight / 3;
      if (l_fltGripHeight > 8)
      {
        l_fltGripHeight = 8;
      }
    }
    if (l_fltGripWidth == 0)
    {
      l_fltGripWidth = 81;
    }
    if (l_fltGripOpenWidth == 0)
    {
      l_fltGripOpenWidth = 87;
    }
    if (l_fltGripForce == 0)
    {
      l_fltGripForce = 5;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("     Source Labware ID:  "), l_strLabwareID);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("     Parameter from Labware - Grip Height:  "), l_fltGripHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("     Parameter from Labware - Grip Width:  "), l_fltGripWidth);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("     Parameter from Labware - Grip Open Width:  "), l_fltGripOpenWidth);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("     Parameter from Labware - Grip Force:  "), l_fltGripForce);
    SeqRemoveAll(l_seqSource);
    l_strLabwareID = SeqGetLabwareId(i_seqSourcePosition);
    l_strPositionID = SeqGetPositionId(i_seqSourcePosition);
    SeqAdd(l_seqSource, l_strLabwareID, l_strPositionID);
    SeqResetSequenceIndexes(l_seqSource);
    SeqRemoveAll(l_seqDestination);
    l_strLabwareID = SeqGetLabwareId(i_seqDestinationPosition);
    l_strPositionID = SeqGetPositionId(i_seqDestinationPosition);
    SeqAdd(l_seqDestination, l_strLabwareID, l_strPositionID);
    SeqResetSequenceIndexes(l_seqDestination);
    onerror goto errLabel_5 ;
    err.Clear();
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    errLabel_5 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      l_strLabwareIDSource = SeqGetLabwareId(i_seqSourcePosition);
      l_strLabwareIDDestination = SeqGetLabwareId(i_seqDestinationPosition);
      l_strReturn = StrConcat4(Translate("Please pickup the plate from "), l_strLabwareIDSource, Translate("and move it to "), l_strLabwareIDDestination);
      VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Gripper had difficulties picking up the plate."), l_strReturn);
    }   /* end if from skip handler if no error */
    if (i_blnParkArm == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  private function _VersionHistory(  ) void {
  }

  private function _RemoveUsedPositions( sequence & io_seq_SequenceToCheck ) void {
    private variable i;
    private variable int_CurrentStartPosition;
    private variable str_LabID;
    private variable int_CurrentEndPosition;
    private variable str_PosID;
    private variable int_TotalPositions;
    private sequence seq_Temp;
    SeqRemoveAll(seq_Temp);
    int_TotalPositions = SeqGetTotal(io_seq_SequenceToCheck);
    int_CurrentStartPosition = io_seq_SequenceToCheck.GetCurrentPosition();
    int_CurrentEndPosition = io_seq_SequenceToCheck.GetCount();
    if (int_CurrentStartPosition > 0)
    {
      {
        for(i = 0; i < int_TotalPositions;)
        {
          i = i + 1;
          str_LabID = Translate("");
          str_PosID = Translate("");
          io_seq_SequenceToCheck.SetCurrentPosition(i);
          if (i >= int_CurrentStartPosition)
          {
            if (i <= int_CurrentEndPosition)
            {
              str_LabID = SeqGetLabwareId(io_seq_SequenceToCheck);
              str_PosID = SeqGetPositionId(io_seq_SequenceToCheck);
            }
          }
          if (str_LabID != "")
          {
            if (str_PosID != "")
            {
              SeqAdd(seq_Temp, str_LabID, str_PosID);
            }
          }
        }
      }
    }
    seq_Temp.SetCurrentPosition(1);
    SeqCopySequence(io_seq_SequenceToCheck, seq_Temp);
  }

  function PIP_MPH_EthanolWash( device & ML_STAR, sequence i_seqEthanolPosition, sequence i_seqMIDIPlatePosition, sequence i_seqLiquidWastePosition, variable i_fltEthanolVolume, variable i_fltExtraVolume, variable i_strLiquidClassEthanolAddition, variable i_strLiquidClassFirstRemoval, variable i_strLiquidClassSecondRemoval, variable i_strTrackingFileStatus ) void {
    private variable l_strAspReturn3;
    private variable l_strAspReturn4;
    private variable l_intCurrentPosition;
    private variable l_intEndPosition;
    private variable l_intCurrentPositionTipSupport;
    private variable l_intNumberOfSamples;
    private variable l_strDspReturn3;
    private variable l_intTipType;
    private variable l_fltMaxVolume;
    private variable l_strDspReturn4;
    private variable l_fltMaxAspiration;
    private variable l_fltFirstRemovalVolume;
    private variable l_fltContainerClearance;
    private variable l_fltDispenseHeight;
    private variable l_fltSecondRemovalVolume;
    private variable l_fltContainerDepth;
    private variable l_fltFinalRemovalVolume;
    private variable l_strReturn3Tip;
    private timer l_hdlEthanolCollectTimer;
    private timer l_hdlTimerEthanolWash;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqMIDIPlatePosition.GetCurrentPosition();
      l_intEndPosition = i_seqMIDIPlatePosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    SeqResetSequenceIndexes(i_seqEthanolPosition);
    SeqResetSequenceIndexes(i_seqMIDIPlatePosition);
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqEthanolPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqMIDIPlatePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClassEthanolAddition, Translate("\r"), Translate("     Transfer Volume:  "), i_fltEthanolVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClassEthanolAddition, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltEthanolVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, Translate("Ethanol addition"));
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Ethanol addition"));
    DATACONTROLLER::TIME_TimerStart(30, Translate("Ethanol Wash Timer"), ASWGLOBAL::BOOL::TRUE, l_hdlTimerEthanolWash);
    MECC::TraceComment(Translate("=================================================================\n\nREMOVE SUPERNATANT\n\n================================================================="));
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     First Liquid Class:  "), i_strLiquidClassFirstRemoval, Translate("\R     Second Liquid Class:  "), i_strLiquidClassSecondRemoval, Translate("\R     Total Samples:  "), l_intNumberOfSamples, Translate("\R     Total Volume in Wells:  "), i_fltEthanolVolume, Translate("\R     Additional Volume to Remove:  "), i_fltExtraVolume);
    i_fltEthanolVolume = i_fltEthanolVolume + 20.0;
    l_fltMaxAspiration = i_fltEthanolVolume + i_fltExtraVolume;
    if (l_fltMaxAspiration > l_fltMaxVolume)
    {
      l_fltFirstRemovalVolume = l_fltMaxAspiration - l_fltMaxVolume;
      l_fltFirstRemovalVolume = l_fltFirstRemovalVolume + 100.0;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Additional Volume to Remove:  "), i_fltExtraVolume, Translate(" uL"), Translate(""));
    l_fltFinalRemovalVolume = i_fltExtraVolume;
    TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("     Final Removal Volume:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
    l_fltSecondRemovalVolume = i_fltEthanolVolume - i_fltExtraVolume;
    if (l_fltSecondRemovalVolume < 0.0)
    {
      l_fltSecondRemovalVolume = 0.0;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     First Volume to Remove:  "), l_fltFirstRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Second Volume to Remove:  "), l_fltSecondRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Final Volume to Remove:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
    LPQ::CONT_GetContainerDepth(ML_STAR, i_seqLiquidWastePosition, ASWGLOBAL::BOOL::FALSE, l_fltContainerDepth, l_fltContainerClearance);
    l_fltDispenseHeight = l_fltContainerDepth - 5.0;
    if (l_fltFirstRemovalVolume > 0.0)
    {
      ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
      MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqMIDIPlatePosition, 0.0, 0.0, 3.0, 0.0);
      MECC::TraceComment(Translate("=================================================================\nInitial removal of liquid\n================================================================="));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqMIDIPlatePosition, 0.0, 0.0, -3.0, 0.0);
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        	l_strDspReturn3 = arrRetValues[2];
        	l_strDspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nAspirate from waste again to prevent bubbles\n================================================================="));
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), Translate(""), i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant to Waste"));
    }
    ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
    if (l_fltSecondRemovalVolume > 0.0)
    {
      MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqMIDIPlatePosition, 0.0, 0.0, 3.0, 0.0);
      MECC::TraceComment(Translate("=================================================================\nInitial removal of liquid\n================================================================="));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqMIDIPlatePosition, 0.0, 0.0, -3.0, 0.0);
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), Translate(""), i_strLiquidClassSecondRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
    }
    DATACONTROLLER::TIME_TimerStart(5, Translate("EthanolCollectTimer"), ASWGLOBAL::BOOL::TRUE, l_hdlEthanolCollectTimer);
    MECC::TraceComment(Translate("=================================================================\nFinal removal of liquid\n================================================================="));
    if(0){
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), Translate(""), i_strLiquidClassSecondRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Final Supernatant Removal"));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant to Waste"));
    MECC::TraceComment(Translate("=================================================================\nAspirate from waste again to prevent bubbles\n================================================================="));
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MixLiquid( device & iML_Star, variable i_intTipType, sequence iSeq_MixingSequence, variable iAspirationVolume, variable iAspirationSpeed, variable iLoopCycles, variable iWaitingTimeBetweenCyles, variable iMixVolume, variable iMixSpeed, variable iMixCycles ) void {
    private dialog dialogHandle_6;
    private variable oldX_tenth;
    private variable iAspirationVolume_tenth;
    private variable AspirationVolumeTooBig;
    private variable iLiquidFollowingDistanceAtMixing_tenth;
    private variable nextCycle;
    private variable iRetractDistanceToDispenseHeight_tenth;
    private variable dummy;
    private variable oldX;
    private variable FirmwareParameterTH;
    private variable ChannelActive;
    private variable coordinate_z_tenth;
    private variable PosID_mixing;
    private variable ZeroCounter;
    private variable coordinate_y_tenth;
    private variable coordinate_x_initial;
    private variable coordinate_x;
    private variable oldY;
    private variable retractDistance;
    private variable CheckPattern;
    private variable coordinate_z_old;
    private variable l_strChannelPattern;
    private variable iLiquidFollowingDistanceFirstDisp_tenth;
    private variable FoundOverflowVolume;
    private variable coordinate_y;
    private variable FirmwareTipPattern;
    private variable blowoutAir;
    private variable FirmwareParameterY;
    private variable coordinate_z_retract;
    private variable FirmwareParameterZ;
    private variable coordinate_z;
    private variable ReturnStringDispense;
    private variable TipType;
    private variable currentMixSeq;
    private variable coordinate_angle;
    private variable FirmwareCommandDS;
    private variable count;
    private variable multiplier;
    private variable LabID_mixing;
    private variable iMixVolume_tenth;
    private variable retractDistance_int;
    private variable FirmwareCommandAS;
    private variable type;
    private variable coordinate_z_te;
    private variable loopCounter1;
    private variable PatternLength;
    private variable index;
    private variable loopCounter2;
    private variable FirmwareParameterDS;
    private variable FirmwareParameterZ_retract;
    private variable loopCounter3;
    private variable usedPositionCounter;
    private variable coordinate_z_th;
    private variable iMixSpeed_tenth;
    private variable ReturnStringAspirate;
    private variable MixVolumeTooBig;
    private variable FirmwareParameterAS;
    private variable iHeightAboveContainerBottomCalc;
    private variable coordinate_y_initial;
    private variable FirmwareParameterTE;
    private timer timer1;
    private variable l_strReturnLiquidLevel;
    private variable l_intLiquidLevelHeight;
    private variable l_intLiquidFollowingDistanceAtMixing;
    private variable l_intRetractDistanceToDispenseHeight;
    private variable l_intLiquidFollowingDistanceFirstDisp;
    private sequence l_seqMixingTemp;
    private variable l_intAspirationHeightAboveContainerBottom;
    private variable l_fltTipLength;
    private dialog dialogHandle_7;
    private dialog dialogHandle_8;
    AspirationVolumeTooBig = 0;
    if (i_intTipType == 2)
    {
      if (iAspirationVolume > 10)
      {
        AspirationVolumeTooBig = 1;
      }
    }
    if (i_intTipType == 3)
    {
      if (iAspirationVolume > 10)
      {
        AspirationVolumeTooBig = 1;
      }
    }
    if (i_intTipType == 22)
    {
      if (iAspirationVolume > 50)
      {
        AspirationVolumeTooBig = 1;
      }
    }
    if (i_intTipType == 23)
    {
      if (iAspirationVolume > 50)
      {
        AspirationVolumeTooBig = 1;
      }
    }
    if (i_intTipType == 0)
    {
      if (iAspirationVolume > 300)
      {
        AspirationVolumeTooBig = 1;
      }
    }
    if (i_intTipType == 1)
    {
      if (iAspirationVolume > 300)
      {
        AspirationVolumeTooBig = 1;
      }
    }
    if (i_intTipType == 4)
    {
      if (iAspirationVolume > 1000)
      {
        AspirationVolumeTooBig = 1;
      }
    }
    if (i_intTipType == 5)
    {
      if (iAspirationVolume > 1000)
      {
        AspirationVolumeTooBig = 1;
      }
    }
    if (AspirationVolumeTooBig != 0)
    {
      dialogHandle_7.SetOutput(Translate("The chosen aspiration volume exceeds the tip capacity."), "\n", iAspirationVolume, "\n", TipType, "\n", AspirationVolumeTooBig, "\n", Translate(" i_intTipType: "), "\n", i_intTipType, Translate("\n\nPlease change the parameter 'iAspirationVolume' or select a different tip sequence."), Translate("\n\nWe are sorry but the method must be aborted now."));
      dialogHandle_7.ShowOutput(Translate("Wrong setting"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      abort;
    }
    MixVolumeTooBig = 0;
    if (i_intTipType == 2)
    {
      if (iMixVolume > 10)
      {
        MixVolumeTooBig = 1;
      }
    }
    if (i_intTipType == 3)
    {
      if (iMixVolume > 10)
      {
        MixVolumeTooBig = 1;
      }
    }
    if (i_intTipType == 22)
    {
      if (iMixVolume > 50)
      {
        MixVolumeTooBig = 1;
      }
    }
    if (i_intTipType == 23)
    {
      if (iMixVolume > 50)
      {
        MixVolumeTooBig = 1;
      }
    }
    if (i_intTipType == 0)
    {
      if (iMixVolume > 300)
      {
        MixVolumeTooBig = 1;
      }
    }
    if (i_intTipType == 1)
    {
      if (iMixVolume > 300)
      {
        MixVolumeTooBig = 1;
      }
    }
    if (i_intTipType == 4)
    {
      if (iMixVolume > 1000)
      {
        MixVolumeTooBig = 1;
      }
    }
    if (i_intTipType == 5)
    {
      if (iMixVolume > 1000)
      {
        MixVolumeTooBig = 1;
      }
    }
    if (MixVolumeTooBig != 0)
    {
      dialogHandle_6.SetOutput(Translate("The chosen mix volume exceeds the tip capacity."), Translate("\n\nPlease change the parameter 'iMixVolume' or select a different tip sequence."), Translate("\n\nWe are sorry but the method must be aborted now."));
      dialogHandle_6.ShowOutput(Translate("Wrong setting"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      abort;
    }
    STAR_CHANNEL_TOOLS::CHAN_ACCESS_Sort1Sequence(iML_Star, iSeq_MixingSequence, 0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, 0, l_seqMixingTemp, l_strChannelPattern);
    _PickUpTipsBasedOnTipType(iML_Star, l_strChannelPattern, i_intTipType);
    PatternLength = StrGetLength(l_strChannelPattern);
    ZeroCounter = 0;
    {
      for(loopCounter2 = 0; loopCounter2 < PatternLength;)
      {
        loopCounter2 = loopCounter2 + 1;
        count = loopCounter2 - 1;
        CheckPattern = StrMid(l_strChannelPattern, count, 1);
        if (CheckPattern == "0")
        {
          ZeroCounter = ZeroCounter + 1;
        }
        if (CheckPattern == "1")
        {
          break;
        }
      }
    }
    LabID_mixing = SeqGetLabwareId(l_seqMixingTemp);
    PosID_mixing = SeqGetPositionId(l_seqMixingTemp);
    DevGetLabwarePositionEx(iML_Star, LabID_mixing, PosID_mixing, coordinate_x_initial, coordinate_y_initial, dummy, dummy);
    if (i_intTipType == 1)
    {
      iML_Star._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    }
    if (i_intTipType == 5)
    {
      iML_Star._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    }
    if (i_intTipType == 23)
    {
      iML_Star._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    }
    {
      	variable arrRetValues[];
      	arrRetValues = iML_Star._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
      	l_strReturnLiquidLevel = arrRetValues[2];
    }
    STAR_CHANNEL_TOOLS::LIQUID_LEVEL_GetLiquidLevelHeight(iML_Star, l_strReturnLiquidLevel, l_seqMixingTemp, 1, l_intLiquidLevelHeight);
    if (t_blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
    {
      l_intLiquidLevelHeight = 30.0;
    }
    STAR_TIP_TOOLS::TipTypeLength_Get(i_intTipType, l_fltTipLength);
    if (l_intLiquidLevelHeight >= l_fltTipLength)
    {
      l_intAspirationHeightAboveContainerBottom = l_intLiquidLevelHeight - l_fltTipLength;
    }
    else
    {
      l_intAspirationHeightAboveContainerBottom = l_intLiquidLevelHeight * 0.05;
    }
    l_intRetractDistanceToDispenseHeight = (l_intLiquidLevelHeight - l_intAspirationHeightAboveContainerBottom) * 0.6;
    l_intLiquidFollowingDistanceFirstDisp = (l_intLiquidLevelHeight - l_intRetractDistanceToDispenseHeight) * 0.4;
    l_intLiquidFollowingDistanceAtMixing = (l_intLiquidLevelHeight - l_intLiquidFollowingDistanceFirstDisp) * 0.8;
    TRACELEVEL::Trace_08(TRACE_LEVEL_DEBUG, Translate("     l_intRetractDistanceToDispenseHeight:  "), l_intRetractDistanceToDispenseHeight, Translate(",     l_intLiquidFollowingDistanceFirstDisp: "), l_intLiquidFollowingDistanceFirstDisp, Translate(",     l_intLiquidFollowingDistanceAtMixing: "), l_intLiquidFollowingDistanceAtMixing, Translate(",     l_intAspirationHeightAboveContainerBottom"), l_intAspirationHeightAboveContainerBottom);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Tip Length: "), l_fltTipLength);
    currentMixSeq = l_seqMixingTemp.GetCurrentPosition();
    FirmwareParameterY = Translate("yp");
    FirmwareParameterZ = Translate("zp");
    FirmwareParameterZ_retract = Translate("zp");
    FirmwareParameterTH = Translate("th");
    FirmwareParameterTE = Translate("te");
    FirmwareTipPattern = Translate("");
    usedPositionCounter = 0;
    {
      for(loopCounter1 = 0; loopCounter1 < PatternLength;)
      {
        loopCounter1 = loopCounter1 + 1;
        index = loopCounter1 - 1;
        ChannelActive = StrMid(l_strChannelPattern, index, 1);
        oldX = coordinate_x_initial;
        if (ChannelActive == "1")
        {
          LabID_mixing = SeqGetLabwareId(l_seqMixingTemp);
          PosID_mixing = SeqGetPositionId(l_seqMixingTemp);
          DevGetLabwarePositionEx(iML_Star, LabID_mixing, PosID_mixing, coordinate_x, coordinate_y, coordinate_z, coordinate_angle);
          if (coordinate_x != oldX)
          {
            FirmwareTipPattern = StrConcat4(FirmwareTipPattern, Translate(" 0"), Translate(""), Translate(""));
            coordinate_y = coordinate_y_initial - 9;
            coordinate_z = 360;
          }
          else
          {
            FirmwareTipPattern = StrConcat4(FirmwareTipPattern, Translate(" "), ChannelActive, Translate(""));
            usedPositionCounter = usedPositionCounter + 1;
          }
          oldY = coordinate_y;
          SeqIncrement(l_seqMixingTemp, 1);
        }
        else
        {
          if (ZeroCounter > 0)
          {
            multiplier = ZeroCounter * 9;
            coordinate_y = coordinate_y_initial + multiplier;
            ZeroCounter = ZeroCounter - 1;
          }
          else
          {
            coordinate_y = oldY - 9;
          }
          oldY = coordinate_y;
          coordinate_z = 360;
          FirmwareTipPattern = StrConcat4(FirmwareTipPattern, Translate(" 0"), Translate(""), Translate(""));
        }
        coordinate_y_tenth = coordinate_y * 10;
        coordinate_y_tenth = MthRound(coordinate_y_tenth, 0);
        coordinate_y_tenth = StrIStr(coordinate_y_tenth);
        coordinate_y_tenth = StrFillLeft(coordinate_y_tenth, Translate("0"), 4);
        if (coordinate_z != 360)
        {
          iHeightAboveContainerBottomCalc = l_intAspirationHeightAboveContainerBottom;
          coordinate_z = coordinate_z + iHeightAboveContainerBottomCalc;
          coordinate_z_tenth = coordinate_z * 10;
          iRetractDistanceToDispenseHeight_tenth = l_intRetractDistanceToDispenseHeight * 10;
          retractDistance = coordinate_z_tenth + iRetractDistanceToDispenseHeight_tenth;
          coordinate_z_tenth = MthRound(coordinate_z_tenth, 0);
          coordinate_z_tenth = StrIStr(coordinate_z_tenth);
          coordinate_z_tenth = StrFillLeft(coordinate_z_tenth, Translate("0"), 4);
          coordinate_z_old = coordinate_z_tenth;
          retractDistance = MthRound(retractDistance, 0);
          retractDistance = StrIStr(retractDistance);
          retractDistance = StrFillLeft(retractDistance, Translate("0"), 4);
        }
        else
        {
          coordinate_z_tenth = 2450;
          retractDistance = 2450;
        }
        if (loopCounter1 == 1)
        {
          FirmwareParameterY = StrConcat4(FirmwareParameterY, Translate(""), coordinate_y_tenth, Translate(""));
          FirmwareParameterZ = StrConcat4(FirmwareParameterZ, Translate(""), coordinate_z_tenth, Translate(""));
          FirmwareParameterTH = StrConcat4(FirmwareParameterTH, Translate(""), coordinate_z_tenth, Translate(""));
          FirmwareParameterTE = StrConcat4(FirmwareParameterTE, Translate(""), coordinate_z_tenth, Translate(""));
          FirmwareParameterZ_retract = StrConcat4(FirmwareParameterZ_retract, Translate(""), retractDistance, Translate(""));
          coordinate_z_retract = retractDistance;
        }
        else
        {
          FirmwareParameterY = StrConcat4(FirmwareParameterY, Translate(" "), coordinate_y_tenth, Translate(""));
          FirmwareParameterZ = StrConcat4(FirmwareParameterZ, Translate(" "), coordinate_z_tenth, Translate(""));
          FirmwareParameterTH = StrConcat4(FirmwareParameterTH, Translate(" "), coordinate_z_tenth, Translate(""));
          FirmwareParameterTE = StrConcat4(FirmwareParameterTE, Translate(" "), coordinate_z_tenth, Translate(""));
          FirmwareParameterZ_retract = StrConcat4(FirmwareParameterZ_retract, Translate(" "), retractDistance, Translate(""));
        }
      }
    }
    oldX_tenth = oldX * 10;
    oldX_tenth = MthRound(oldX_tenth, 0);
    oldX_tenth = StrIStr(oldX_tenth);
    oldX_tenth = StrFillLeft(oldX_tenth, Translate("0"), 5);
    FirmwareTipPattern = StrMid(FirmwareTipPattern, 1, 32);
    FirmwareTipPattern = StrConcat2(Translate("tm"), FirmwareTipPattern);
    iAspirationVolume_tenth = iAspirationVolume * 10;
    iAspirationVolume_tenth = MthRound(iAspirationVolume_tenth, 0);
    iAspirationVolume_tenth = StrIStr(iAspirationVolume_tenth);
    iAspirationVolume_tenth = StrFillLeft(iAspirationVolume_tenth, Translate("0"), 5);
    iMixVolume_tenth = iMixVolume * 10;
    iMixVolume_tenth = MthRound(iMixVolume_tenth, 0);
    iMixVolume_tenth = StrIStr(iMixVolume_tenth);
    iMixVolume_tenth = StrFillLeft(iMixVolume_tenth, Translate("0"), 5);
    iAspirationSpeed = StrIStr(iAspirationSpeed);
    iAspirationSpeed = StrFillLeft(iAspirationSpeed, Translate("0"), 4);
    iMixSpeed_tenth = iMixSpeed * 1;
    iMixSpeed_tenth = MthRound(iMixSpeed_tenth, 0);
    iMixSpeed_tenth = StrIStr(iMixSpeed_tenth);
    iMixSpeed_tenth = StrFillLeft(iMixSpeed_tenth, Translate("0"), 4);
    iMixCycles = StrIStr(iMixCycles);
    iMixCycles = StrFillLeft(iMixCycles, Translate("0"), 2);
    iLiquidFollowingDistanceFirstDisp_tenth = l_intLiquidFollowingDistanceFirstDisp * 10;
    iLiquidFollowingDistanceAtMixing_tenth = l_intLiquidFollowingDistanceAtMixing * 10.0;
    iLiquidFollowingDistanceAtMixing_tenth = MthRound(iLiquidFollowingDistanceAtMixing_tenth, 0);
    iLiquidFollowingDistanceAtMixing_tenth = StrIStr(iLiquidFollowingDistanceAtMixing_tenth);
    iLiquidFollowingDistanceAtMixing_tenth = StrFillLeft(iLiquidFollowingDistanceAtMixing_tenth, Translate("0"), 4);
    {
      for(loopCounter3 = 0; loopCounter3 < iLoopCycles;)
      {
        loopCounter3 = loopCounter3 + 1;
        if (loopCounter3 < iLoopCycles)
        {
          blowoutAir = Translate("0000");
        }
        else
        {
          blowoutAir = Translate("0300");
        }
        if (loopCounter3 == 1)
        {
          coordinate_z_th = 2450;
        }
        else
        {
          coordinate_z_th = coordinate_z_old;
        }
        FirmwareCommandAS = Translate("C0AS");
        FirmwareParameterAS = StrConcat8(Translate("at0&"), FirmwareTipPattern, Translate("xp"), oldX_tenth, Translate("&"), FirmwareParameterY, Translate("th"), coordinate_z_th);
        FirmwareParameterAS = StrConcat8(FirmwareParameterAS, Translate("te"), retractDistance, Translate("lp0000&ch000&zl"), coordinate_z_old, Translate("&zu0000&zr00000&zx"), coordinate_z_old, Translate("&ip0000&it0&fp0000&av"));
        FirmwareParameterAS = StrConcat8(FirmwareParameterAS, iAspirationVolume_tenth, Translate("&as"), iAspirationSpeed, Translate("&ta000&ba"), blowoutAir, Translate("&oa000&lm0&ll4&lv4&ld00&de0200&wt05&mv00000&mc00&mp000&ms0400&gi000&gj0gk0"), Translate(""));
        TrcTrace(Translate("----------- FirmwareParameterAS = "), FirmwareParameterAS);
        {
          	variable arrRetValues[];
          	arrRetValues = iML_Star._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	ReturnStringAspirate = arrRetValues[3];
        }
        FoundOverflowVolume = StrFind(ReturnStringAspirate, Translate("53"));
        if (FoundOverflowVolume > 0)
        {
          dialogHandle_8.SetOutput(Translate("The given volume is larger than the tip's capacity.\n\n"), Translate("Possible reason:\n"), Translate("     1. The given mix volume is larger than the tip's capacity.\n"), Translate("     2. A previously aspirated volume PLUS the given mix volume is larger than the tip's capacity.\n\n"), Translate("Please change the mix volume to fit in the picked tip type.\n\n"), Translate("We are sorry but the method must be aborted."));
          dialogHandle_8.ShowOutput(Translate("Wrong setting detected"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          iML_Star._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          abort;
        }
        if (loopCounter3 == 1)
        {
          retractDistance_int = retractDistance;
          type = StrGetType(retractDistance_int);
          if (type != "i")
          {
            retractDistance_int = StrIVal(retractDistance);
          }
          coordinate_z_te = retractDistance_int + 50;
          coordinate_z_te = coordinate_z_te + iLiquidFollowingDistanceFirstDisp_tenth;
          coordinate_z_te = MthRound(coordinate_z_te, 0);
          coordinate_z_te = StrIStr(coordinate_z_te);
          coordinate_z_te = StrFillLeft(coordinate_z_te, Translate("0"), 4);
          iLiquidFollowingDistanceFirstDisp_tenth = MthRound(iLiquidFollowingDistanceFirstDisp_tenth, 0);
          iLiquidFollowingDistanceFirstDisp_tenth = StrIStr(iLiquidFollowingDistanceFirstDisp_tenth);
          iLiquidFollowingDistanceFirstDisp_tenth = StrFillLeft(iLiquidFollowingDistanceFirstDisp_tenth, Translate("0"), 4);
          FirmwareCommandDS = Translate("C0DS");
        }
        FirmwareCommandDS = Translate("C0DS");
        FirmwareParameterDS = StrConcat8(Translate("dm3&"), FirmwareTipPattern, Translate("xp"), oldX_tenth, Translate("&"), FirmwareParameterY, Translate("zx"), coordinate_z_old);
        FirmwareParameterDS = StrConcat8(FirmwareParameterDS, Translate("&lp0000&zl"), retractDistance, Translate("&ip0000&it0&fp"), iLiquidFollowingDistanceFirstDisp_tenth, Translate("&zu0000&zr00000&th"), retractDistance, Translate("te"));
        if (loopCounter3 < iLoopCycles)
        {
          FirmwareParameterDS = StrConcat12(FirmwareParameterDS, coordinate_z_tenth, Translate("dv"), iAspirationVolume_tenth, Translate("&ds"), iMixSpeed_tenth, Translate("&ss3000&rv000&ta000&ba"), blowoutAir, Translate("&lm0&dj00zo005&ll1&lv1&de0500&wt05&mv"), iMixVolume_tenth, Translate("&mc"), iMixCycles);
          FirmwareParameterDS = StrConcat8(FirmwareParameterDS, Translate("&mp000&ms"), iMixSpeed_tenth, Translate("&mh"), iLiquidFollowingDistanceAtMixing_tenth, Translate("&gi000&gj0gk0"), Translate(""), Translate(""));
        }
        else
        {
          FirmwareParameterDS = StrConcat12(FirmwareParameterDS, 2450, Translate("dv"), iAspirationVolume_tenth, Translate("&ds"), iMixSpeed_tenth, Translate("&ss3000&rv000&ta000&ba"), blowoutAir, Translate("&lm0&dj00zo005&ll1&lv1&de0500&wt05&mv"), iMixVolume_tenth, Translate("&mc"), iMixCycles);
          FirmwareParameterDS = StrConcat8(FirmwareParameterDS, Translate("&mp000&ms"), iMixSpeed_tenth, Translate("&mh"), iLiquidFollowingDistanceAtMixing_tenth, Translate("&gi000&gj0gk0"), Translate(""), Translate(""));
        }
        TrcTrace(Translate("----------- FirmwareParameterDS = "), FirmwareParameterDS);
        {
          	variable arrRetValues[];
          	arrRetValues = iML_Star._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	ReturnStringDispense = arrRetValues[3];
        }
        if (loopCounter3 < iLoopCycles)
        {
          nextCycle = loopCounter3 + 1;
          TrcTrace8(Translate("----------- Pause: wait for "), iWaitingTimeBetweenCyles, Translate(" seconds before starting cycle "), nextCycle, Translate(" of "), iLoopCycles, Translate(""), Translate(""));
          if( 0 == timer1.SetTimer(iWaitingTimeBetweenCyles) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          TrcTrace4(Translate("----------- Pause: End"), Translate(""), Translate(""), Translate(""));
        }
      }
    }
    iML_Star._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }

  private function PIP_SingleDispenseFromTrough( device & ML_STAR, variable i_intAspirationMode, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltTransferVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_blnReuseTips, variable i_strTrackingFileStatus, variable i_blnIsSampleOrReagent ) void {
    private variable i_blnIsReagent;
    private variable l_intAdditionRound;
    private variable l_strChannelPattern;
    private variable l_intTotalChannels;
    private variable l_intTotalPositions;
    private variable l_strAspReturn;
    private variable l_blnFixedHeightDispense;
    private variable i_blnTransferSampleOrReagent;
    private variable l_strLiqReturn;
    private variable l_blnFixedHeightAspiration;
    private variable l_strDspReturn;
    private variable i_blnIsSample;
    private variable l_fltMaxVolume;
    private variable l_intTipType;
    private sequence l_seqAdoptedAspirationPosition;
    private sequence l_seqAdoptedDispensePosition;
    private sequence l_seqDisp;
    private sequence l_seqAsp;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_intAspirationMode > 2)
    {
      VectorCustomDialogs::MessageDialog(Translate("Incorrect Parameter"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Method will abort because of improper aspiration mode"));
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    STAR_TIP_TOOLS::Get1mLChannelCount(ML_STAR, l_intTotalChannels);
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltTransferVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _MatchAspirationToDispenseSequence(i_seqAspirationPosition, i_seqDispensePosition, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition);
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltTransferVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    l_intTotalPositions = SeqGetTotal(l_seqAdoptedDispensePosition);
    {
      l_intAdditionRound = 0;
      while (l_intTotalPositions > 0)
      {
        l_intAdditionRound = l_intAdditionRound + 1;
        l_intTotalPositions = STAR_CHANNEL_TOOLS::CHAN_ACCESS_Sort2Sequences(ML_STAR, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition, 0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_intTotalChannels, l_seqAsp, l_seqDisp, l_strChannelPattern);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Number of Channels: "), l_intTotalChannels);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Channel Pattern: "), l_strChannelPattern);
        MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
        if (i_blnReuseTips == ASWGLOBAL::BOOL::FALSE)
        {
          _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
        }
        else
        {
          if (l_intAdditionRound == 1)
          {
            _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
          }
        }
        MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	l_strAspReturn = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
          	l_strLiqReturn = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	l_strDspReturn = arrRetValues[2];
        }
        if (i_blnReuseTips == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, l_strAspReturn, Translate(""), l_strLiqReturn, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
        DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
      }
    }
    if (i_blnReuseTips == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MPH_SingleDispenseLowElution( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent ) void {
    private variable l_strAspReturn3;
    private variable i_blnIsReagent;
    private variable l_strAspReturn4;
    private variable l_blnFixedHeightDispense;
    private variable l_intCurrentPosition;
    private variable l_intEndPosition;
    private variable l_strReturn3Tip;
    private variable l_intCurrentPositionTipSupport;
    private variable l_blnFixedHeightAspiration;
    private variable l_intNumberOfSamples;
    private variable i_blnIsSample;
    private variable l_strDspReturn3;
    private variable l_fltMaxVolume;
    private variable l_intTipType;
    private variable l_strDspReturn4;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    SeqResetSequenceIndexes(i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqDispensePosition.GetCurrentPosition();
      l_intEndPosition = i_seqDispensePosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_SingleDispenseLowElution( device & ML_STAR, variable i_intAspirationMode, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltTransferVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_blnReuseTips, variable i_strTrackingFileStatus, variable i_blnIsSampleOrReagent ) void {
    private variable i_blnIsReagent;
    private variable l_intAdditionRound;
    private variable l_strChannelPattern;
    private variable l_intTotalChannels;
    private variable l_intTotalPositions;
    private variable l_strAspReturn;
    private variable l_blnFixedHeightDispense;
    private variable i_blnTransferSampleOrReagent;
    private variable l_strLiqReturn;
    private variable l_blnFixedHeightAspiration;
    private variable l_strDspReturn;
    private variable i_blnIsSample;
    private variable l_intTipType;
    private variable l_fltMaxVolume;
    private sequence l_seqAdoptedAspirationPosition;
    private sequence l_seqAdoptedDispensePosition;
    private sequence l_seqDisp;
    private sequence l_seqAsp;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_intAspirationMode > 2)
    {
      VectorCustomDialogs::MessageDialog(Translate("Incorrect Parameter"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Method will abort because of improper aspiration mode"));
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    STAR_TIP_TOOLS::Get1mLChannelCount(ML_STAR, l_intTotalChannels);
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltTransferVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _MatchAspirationToDispenseSequence(i_seqAspirationPosition, i_seqDispensePosition, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition);
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltTransferVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    l_intTotalPositions = SeqGetTotal(l_seqAdoptedDispensePosition);
    {
      l_intAdditionRound = 0;
      while (l_intTotalPositions > 0)
      {
        l_intAdditionRound = l_intAdditionRound + 1;
        l_intTotalPositions = STAR_CHANNEL_TOOLS::CHAN_ACCESS_Sort2Sequences(ML_STAR, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition, 0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_intTotalChannels, l_seqAsp, l_seqDisp, l_strChannelPattern);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Number of Channels: "), l_intTotalChannels);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Channel Pattern: "), l_strChannelPattern);
        MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
        if (i_blnReuseTips == ASWGLOBAL::BOOL::FALSE)
        {
          _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
        }
        else
        {
          if (l_intAdditionRound == 1)
          {
            _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
          }
        }
        MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	l_strAspReturn = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
          	l_strLiqReturn = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	l_strDspReturn = arrRetValues[2];
        }
        if (i_blnReuseTips == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, l_strAspReturn, Translate(""), l_strLiqReturn, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
        DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
      }
    }
    if (i_blnReuseTips == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MPH_MixPlate( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent ) void {
    private variable l_strAspReturn3;
    private variable i_blnIsReagent;
    private variable l_strAspReturn4;
    private variable l_blnFixedHeightDispense;
    private variable l_intCurrentPosition;
    private variable l_intEndPosition;
    private variable l_strReturn3Tip;
    private variable l_intCurrentPositionTipSupport;
    private variable l_blnFixedHeightAspiration;
    private variable l_intNumberOfSamples;
    private variable i_blnIsSample;
    private variable l_strDspReturn3;
    private variable l_intTipType;
    private variable l_fltMaxVolume;
    private variable l_strDspReturn4;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    SeqResetSequenceIndexes(i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqDispensePosition.GetCurrentPosition();
      l_intEndPosition = i_seqDispensePosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MixTubes( device & ML_STAR, variable i_intAspirationMode, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltTransferVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_blnReuseTips, variable i_strTrackingFileStatus, variable i_blnIsSampleOrReagent ) void {
    private variable l_intAdditionRound;
    private variable i_blnIsReagent;
    private variable l_strChannelPattern;
    private variable l_intTotalChannels;
    private variable l_intTotalPositions;
    private variable l_strAspReturn;
    private variable l_blnFixedHeightDispense;
    private variable i_blnTransferSampleOrReagent;
    private variable l_strLiqReturn;
    private variable l_blnFixedHeightAspiration;
    private variable l_strDspReturn;
    private variable i_blnIsSample;
    private variable l_intTipType;
    private variable l_fltMaxVolume;
    private sequence l_seqAdoptedAspirationPosition;
    private sequence l_seqAdoptedDispensePosition;
    private sequence l_seqDisp;
    private sequence l_seqAsp;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_intAspirationMode > 2)
    {
      VectorCustomDialogs::MessageDialog(Translate("Incorrect Parameter"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Method will abort because of improper aspiration mode"));
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    STAR_TIP_TOOLS::Get1mLChannelCount(ML_STAR, l_intTotalChannels);
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltTransferVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _MatchAspirationToDispenseSequence(i_seqAspirationPosition, i_seqDispensePosition, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition);
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltTransferVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    l_intTotalPositions = SeqGetTotal(l_seqAdoptedDispensePosition);
    {
      l_intAdditionRound = 0;
      while (l_intTotalPositions > 0)
      {
        l_intAdditionRound = l_intAdditionRound + 1;
        l_intTotalPositions = STAR_CHANNEL_TOOLS::CHAN_ACCESS_Sort2Sequences(ML_STAR, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition, 0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_intTotalChannels, l_seqAsp, l_seqDisp, l_strChannelPattern);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Number of Channels: "), l_intTotalChannels);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Channel Pattern: "), l_strChannelPattern);
        MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
        if (i_blnReuseTips == ASWGLOBAL::BOOL::FALSE)
        {
          _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
        }
        else
        {
          if (l_intAdditionRound == 1)
          {
            _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
          }
        }
        MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	l_strAspReturn = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
          	l_strLiqReturn = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	l_strDspReturn = arrRetValues[2];
        }
        if (i_blnReuseTips == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, l_strAspReturn, Translate(""), l_strLiqReturn, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
        DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
      }
    }
    if (i_blnReuseTips == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  private function PIP_MPH_SizeSelectionEthanolWash( device & ML_STAR, sequence i_seqEthanolPosition, sequence i_seqMIDIPlatePosition, sequence i_seqLiquidWastePosition, variable i_fltEthanolVolume, variable i_fltExtraVolume, variable i_strLiquidClassEthanolAddition, variable i_strLiquidClassFirstRemoval, variable i_strLiquidClassSecondRemoval, variable i_strTrackingFileStatus ) void {
    private variable l_fltMaxAspiration;
    private variable l_strAspReturn3;
    private variable l_fltFirstRemovalVolume;
    private variable l_strAspReturn4;
    private variable l_fltContainerClearance;
    private variable l_intCurrentPosition;
    private variable l_strReturn3Tip;
    private variable l_intEndPosition;
    private variable l_fltDispenseHeight;
    private variable l_intCurrentPositionTipSupport;
    private variable l_intNumberOfSamples;
    private variable l_fltSecondRemovalVolume;
    private variable l_fltContainerDepth;
    private variable l_strDspReturn3;
    private variable l_intTipType;
    private variable l_fltMaxVolume;
    private variable l_fltFinalRemovalVolume;
    private variable l_strDspReturn4;
    private timer l_hdlEthanolCollectTimer;
    private timer l_hdlTimerEthanolWash;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqMIDIPlatePosition.GetCurrentPosition();
      l_intEndPosition = i_seqMIDIPlatePosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    SeqResetSequenceIndexes(i_seqEthanolPosition);
    SeqResetSequenceIndexes(i_seqMIDIPlatePosition);
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqEthanolPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqMIDIPlatePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClassEthanolAddition, Translate("\r"), Translate("     Transfer Volume:  "), i_fltEthanolVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClassEthanolAddition, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltEthanolVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, Translate("Ethanol addition"));
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Ethanol addition"));
    DATACONTROLLER::TIME_TimerStart(30, Translate("Ethanol Wash Timer"), ASWGLOBAL::BOOL::TRUE, l_hdlTimerEthanolWash);
    MECC::TraceComment(Translate("=================================================================\n\nREMOVE SUPERNATANT\n\n================================================================="));
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     First Liquid Class:  "), i_strLiquidClassFirstRemoval, Translate("\R     Second Liquid Class:  "), i_strLiquidClassSecondRemoval, Translate("\R     Total Samples:  "), l_intNumberOfSamples, Translate("\R     Total Volume in Wells:  "), i_fltEthanolVolume, Translate("\R     Additional Volume to Remove:  "), i_fltExtraVolume);
    i_fltEthanolVolume = i_fltEthanolVolume + 20.0;
    l_fltMaxAspiration = i_fltEthanolVolume + i_fltExtraVolume;
    if (l_fltMaxAspiration > l_fltMaxVolume)
    {
      l_fltFirstRemovalVolume = l_fltMaxAspiration - l_fltMaxVolume;
      l_fltFirstRemovalVolume = l_fltFirstRemovalVolume + 100.0;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Additional Volume to Remove:  "), i_fltExtraVolume, Translate(" uL"), Translate(""));
    l_fltFinalRemovalVolume = i_fltExtraVolume;
    TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("     Final Removal Volume:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
    l_fltSecondRemovalVolume = i_fltEthanolVolume - i_fltExtraVolume;
    if (l_fltSecondRemovalVolume < 0.0)
    {
      l_fltSecondRemovalVolume = 0.0;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     First Volume to Remove:  "), l_fltFirstRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Second Volume to Remove:  "), l_fltSecondRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Final Volume to Remove:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
    LPQ::CONT_GetContainerDepth(ML_STAR, i_seqLiquidWastePosition, ASWGLOBAL::BOOL::FALSE, l_fltContainerDepth, l_fltContainerClearance);
    l_fltDispenseHeight = l_fltContainerDepth - 5.0;
    if (l_fltFirstRemovalVolume > 0.0)
    {
      ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
      MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqMIDIPlatePosition, 0.0, 0.0, 3.0, 0.0);
      MECC::TraceComment(Translate("=================================================================\nInitial removal of liquid\n================================================================="));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqMIDIPlatePosition, 0.0, 0.0, -3.0, 0.0);
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        	l_strDspReturn3 = arrRetValues[2];
        	l_strDspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nAspirate from waste again to prevent bubbles\n================================================================="));
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), Translate(""), i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant to Waste"));
    }
    ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
    if (l_fltSecondRemovalVolume > 0.0)
    {
      MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqMIDIPlatePosition, 0.0, 0.0, 2.5, 0.0);
      MECC::TraceComment(Translate("=================================================================\nInitial removal of liquid\n================================================================="));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqMIDIPlatePosition, 0.0, 0.0, -2.5, 0.0);
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), Translate(""), i_strLiquidClassSecondRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
    }
    DATACONTROLLER::TIME_TimerStart(5, Translate("EthanolCollectTimer"), ASWGLOBAL::BOOL::TRUE, l_hdlEthanolCollectTimer);
    if (i_fltExtraVolume == 0.0)
    {
    }
    else
    {
      MECC::TraceComment(Translate("=================================================================\nFinal removal of liquid\n================================================================="));
      if(0){
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
      }
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), Translate(""), i_strLiquidClassSecondRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Final Supernatant Removal"));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        	l_strDspReturn3 = arrRetValues[2];
        	l_strDspReturn4 = arrRetValues[3];
      }
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant to Waste"));
      MECC::TraceComment(Translate("=================================================================\nAspirate from waste again to prevent bubbles\n================================================================="));
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MPH_AspirateAll( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent, variable i_fltSpeedFactor ) void {
    private variable l_strAspReturn3;
    private variable i_blnIsReagent;
    private variable l_strAspReturn4;
    private variable l_blnFixedHeightDispense;
    private variable l_intCurrentPosition;
    private variable l_strReturn3Tip;
    private variable l_intEndPosition;
    private variable l_intCurrentPositionTipSupport;
    private variable l_blnFixedHeightAspiration;
    private variable l_intNumberOfSamples;
    private variable i_blnIsSample;
    private variable l_strDspReturn3;
    private variable l_intTipType;
    private variable l_fltMaxVolume;
    private variable l_strDspReturn4;
    i_fltVolume = i_fltVolume + 10;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    SeqResetSequenceIndexes(i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqDispensePosition.GetCurrentPosition();
      l_intEndPosition = i_seqDispensePosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
    ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  private function PIP_MPH_SizeSelectionRemoveSupernatent( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqLiquidWastePosition, variable i_strLiquidClass1, variable i_strLiquidClass2, variable i_fltTotalVolumeInWells, variable i_fltAdditionalRemoval, variable i_strTrackingFileStatus ) void {
    private variable l_fltMaxAspiration;
    private variable l_strAspReturn3;
    private variable l_strAspReturn4;
    private variable l_fltFirstRemovalVolume;
    private variable l_fltContainerClearance;
    private variable l_intCurrentPosition;
    private variable l_intEndPosition;
    private variable l_strReturn3Tip;
    private variable l_fltDispenseHeight;
    private variable l_intCurrentPositionTipSupport;
    private variable l_intNumberOfSamples;
    private variable l_fltSecondRemovalVolume;
    private variable l_fltContainerDepth;
    private variable l_strDspReturn3;
    private variable l_intTipType;
    private variable l_fltMaxVolume;
    private variable l_fltFinalRemovalVolume;
    private variable l_strDspReturn4;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqAspirationPosition.GetCurrentPosition();
      l_intEndPosition = i_seqAspirationPosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     First Liquid Class:  "), i_strLiquidClass1, Translate("\R     Second Liquid Class:  "), i_strLiquidClass2, Translate("\R     Total Samples:  "), l_intNumberOfSamples, Translate("\R     Total Volume in Wells:  "), i_fltTotalVolumeInWells, Translate("\R     Additional Volume to Remove:  "), i_fltAdditionalRemoval);
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass1, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is for unknown tip type for this framework"), Translate("Please check liquid class for tip type usage"));
    }
    l_fltMaxAspiration = i_fltTotalVolumeInWells + i_fltAdditionalRemoval;
    if (l_fltMaxAspiration > l_fltMaxVolume)
    {
      l_fltFirstRemovalVolume = l_fltMaxAspiration - l_fltMaxVolume;
      l_fltFirstRemovalVolume = l_fltFirstRemovalVolume + 100.0;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Additional Volume to Remove:  "), i_fltAdditionalRemoval, Translate(" uL"), Translate(""));
    l_fltFinalRemovalVolume = i_fltAdditionalRemoval;
    TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("     Final Removal Volume:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
    l_fltSecondRemovalVolume = i_fltTotalVolumeInWells - l_fltFinalRemovalVolume;
    if (l_fltSecondRemovalVolume < 0.0)
    {
      l_fltSecondRemovalVolume = 0.0;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     First Volume to Remove:  "), l_fltFirstRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Second Volume to Remove:  "), l_fltSecondRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Final Volume to Remove:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
    LPQ::CONT_GetContainerDepth(ML_STAR, i_seqLiquidWastePosition, ASWGLOBAL::BOOL::FALSE, l_fltContainerDepth, l_fltContainerClearance);
    l_fltDispenseHeight = l_fltContainerDepth - 5.0;
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    if (l_fltFirstRemovalVolume > 0.0)
    {
      ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
      MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqAspirationPosition, 0.0, 0.0, 0.0, 0.0);
      MECC::TraceComment(Translate("=================================================================\nInitial removal of liquid\n================================================================="));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqAspirationPosition, 0.0, 0.0, 0.0, 0.0);
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        	l_strDspReturn3 = arrRetValues[2];
        	l_strDspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nAspirate from waste again to prevent bubbles\n================================================================="));
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass1, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass1, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant to Waste"));
    }
    ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
    if (l_fltSecondRemovalVolume > 0.0)
    {
      MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqAspirationPosition, 0.0, 0.0, 0.5, 0.0);
      MECC::TraceComment(Translate("=================================================================\nInitial removal of liquid\n================================================================="));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), Translate(""), i_strLiquidClass1, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
      MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqAspirationPosition, 0.0, 0.0, -0.5, 0.0);
    }
    MECC::TraceComment(Translate("=================================================================\nFinal removal of liquid\n================================================================="));
    if(0){
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass2, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass2, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
    MECC::TraceComment(Translate("=================================================================\nAspirate from waste again to prevent bubbles\n================================================================="));
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_SingleDispense( device & ML_STAR, variable i_intAspirationMode, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltTransferVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_blnReuseTips, variable i_strTrackingFileStatus, variable i_blnIsSampleOrReagent ) void {
    private variable l_intAdditionRound;
    private variable i_blnIsReagent;
    private variable l_strChannelPattern;
    private variable l_intTotalPositions;
    private variable l_intTotalChannels;
    private variable l_strAspReturn;
    private variable l_blnFixedHeightDispense;
    private variable i_blnTransferSampleOrReagent;
    private variable l_strLiqReturn;
    private variable l_blnFixedHeightAspiration;
    private variable l_strDspReturn;
    private variable i_blnIsSample;
    private variable l_fltMaxVolume;
    private variable l_intTipType;
    private sequence l_seqAdoptedAspirationPosition;
    private sequence l_seqAdoptedDispensePosition;
    private sequence l_seqDisp;
    private sequence l_seqAsp;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_intAspirationMode > 2)
    {
      VectorCustomDialogs::MessageDialog(Translate("Incorrect Parameter"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Method will abort because of improper aspiration mode"));
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    STAR_TIP_TOOLS::Get1mLChannelCount(ML_STAR, l_intTotalChannels);
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltTransferVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _MatchAspirationToDispenseSequence(i_seqAspirationPosition, i_seqDispensePosition, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition);
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltTransferVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    l_intTotalPositions = SeqGetTotal(l_seqAdoptedDispensePosition);
    {
      l_intAdditionRound = 0;
      while (l_intTotalPositions > 0)
      {
        l_intAdditionRound = l_intAdditionRound + 1;
        l_intTotalPositions = STAR_CHANNEL_TOOLS::CHAN_ACCESS_Sort2Sequences(ML_STAR, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition, 0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_intTotalChannels, l_seqAsp, l_seqDisp, l_strChannelPattern);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Number of Channels: "), l_intTotalChannels);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Channel Pattern: "), l_strChannelPattern);
        MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
        if (i_blnReuseTips == ASWGLOBAL::BOOL::FALSE)
        {
          _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
        }
        else
        {
          if (l_intAdditionRound == 1)
          {
            _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
          }
        }
        MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	l_strAspReturn = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
          	l_strLiqReturn = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	l_strDspReturn = arrRetValues[2];
        }
        if (i_blnReuseTips == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, l_strAspReturn, Translate(""), l_strLiqReturn, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
        DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
      }
    }
    if (i_blnReuseTips == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MPH_EthanolWashV2( device & ML_STAR, sequence i_seqEthanolPosition, sequence i_seqMIDIPlatePosition, sequence i_seqLiquidWastePosition, variable i_fltEthanolAdditionVolume, variable i_fltEthanolTotalRemovalVolume, variable i_fltAdditionalRemoval, variable i_strLiquidClassEthanolAddition, variable i_strLiquidClassFirstRemoval, variable i_strLiquidClassSecondRemoval, variable i_strTrackingFileStatus ) void {
    private variable l_fltMaxAspiration;
    private variable l_strAspReturn3;
    private variable l_fltFirstRemovalVolume;
    private variable l_strAspReturn4;
    private variable l_fltContainerClearance;
    private variable l_intCurrentPosition;
    private variable l_intEndPosition;
    private variable l_strReturn3Tip;
    private variable l_fltDispenseHeight;
    private variable l_intCurrentPositionTipSupport;
    private variable l_intNumberOfSamples;
    private variable l_fltSecondRemovalVolume;
    private variable l_fltContainerDepth;
    private variable l_strDspReturn3;
    private variable l_intTipType;
    private variable l_fltMaxVolume;
    private variable l_fltFinalRemovalVolume;
    private variable l_strDspReturn4;
    private timer l_hdlTimerEthanolWash;
    private timer l_hdlEthanolCollectTimer;
    private dialog dialogHandle_9;
    private dialog dialogHandle_10;
    private dialog dialogHandle_11;
    private dialog dialogHandle_12;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqMIDIPlatePosition.GetCurrentPosition();
      l_intEndPosition = i_seqMIDIPlatePosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    SeqResetSequenceIndexes(i_seqEthanolPosition);
    SeqResetSequenceIndexes(i_seqMIDIPlatePosition);
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqEthanolPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqMIDIPlatePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClassEthanolAddition, Translate("\r"), Translate("     Transfer Volume:  "), i_fltEthanolAdditionVolume, Translate("\r"), Translate("     Ethanol Volume to Remove:  "), i_fltEthanolTotalRemovalVolume, Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClassEthanolAddition, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltEthanolAdditionVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, Translate("Ethanol addition"));
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Ethanol addition"));
    DATACONTROLLER::TIME_TimerStart(30, Translate("Ethanol Wash Timer"), ASWGLOBAL::BOOL::TRUE, l_hdlTimerEthanolWash);
    MECC::TraceComment(Translate("=================================================================\n\nREMOVE SUPERNATANT\n\n================================================================="));
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     First Liquid Class:  "), i_strLiquidClassFirstRemoval, Translate("\R     Second Liquid Class:  "), i_strLiquidClassSecondRemoval, Translate("\R     Total Samples:  "), l_intNumberOfSamples, Translate("\R     Total Volume in Wells:  "), i_fltEthanolAdditionVolume, Translate(""), Translate(""));
    i_fltEthanolTotalRemovalVolume = i_fltEthanolTotalRemovalVolume + 20.0;
    l_fltMaxAspiration = i_fltEthanolTotalRemovalVolume + 0;
    if (l_fltMaxAspiration > l_fltMaxVolume)
    {
      l_fltFirstRemovalVolume = l_fltMaxAspiration - l_fltMaxVolume;
      l_fltFirstRemovalVolume = l_fltFirstRemovalVolume + 100.0;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Additional Volume to Remove:  "), i_fltAdditionalRemoval, Translate(" uL"), Translate(""));
    l_fltFinalRemovalVolume = i_fltAdditionalRemoval;
    TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("     Final Removal Volume:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
    l_fltSecondRemovalVolume = i_fltEthanolTotalRemovalVolume - i_fltAdditionalRemoval;
    if (l_fltSecondRemovalVolume < 0.0)
    {
      l_fltSecondRemovalVolume = 0.0;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     First Volume to Remove:  "), l_fltFirstRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Second Volume to Remove:  "), l_fltSecondRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Final Volume to Remove:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
    LPQ::CONT_GetContainerDepth(ML_STAR, i_seqLiquidWastePosition, ASWGLOBAL::BOOL::FALSE, l_fltContainerDepth, l_fltContainerClearance);
    l_fltDispenseHeight = l_fltContainerDepth - 5.0;
    if (l_fltFirstRemovalVolume > 0.0)
    {
      if(0){
        dialogHandle_9.SetOutput(Translate("First removal about to begin"));
        dialogHandle_9.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
      MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqMIDIPlatePosition, 0.0, 0.0, 5.0, 0.0);
      MECC::TraceComment(Translate("=================================================================\nInitial removal of liquid\n================================================================="));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqMIDIPlatePosition, 0.0, 0.0, -5.0, 0.0);
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        	l_strDspReturn3 = arrRetValues[2];
        	l_strDspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nAspirate from waste again to prevent bubbles\n================================================================="));
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), Translate(""), i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant to Waste"));
      if(0){
        dialogHandle_10.SetOutput(Translate("First removal finished"));
        dialogHandle_10.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
    if (l_fltSecondRemovalVolume > 0.0)
    {
      if(0){
        dialogHandle_12.SetOutput(Translate("Starting intermediate removal."), "\n", Translate("This step is going to remove: "), l_fltSecondRemovalVolume, Translate(" uL of ethanol"));
        dialogHandle_12.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqMIDIPlatePosition, 0.0, 0.0, 2.5, 0.0);
      MECC::TraceComment(Translate("=================================================================\nInitial removal of liquid\n================================================================="));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqMIDIPlatePosition, 0.0, 0.0, -2.5, 0.0);
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), Translate(""), i_strLiquidClassSecondRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
    }
    DATACONTROLLER::TIME_TimerStart(5, Translate("EthanolCollectTimer"), ASWGLOBAL::BOOL::TRUE, l_hdlEthanolCollectTimer);
    MECC::TraceComment(Translate("=================================================================\nFinal removal of liquid\n================================================================="));
    if(0){
      dialogHandle_11.SetOutput(Translate("Please check plate here. There should be: "), i_fltAdditionalRemoval, Translate(" uL left in the well"));
      dialogHandle_11.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), Translate(""), i_strLiquidClassSecondRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Final Supernatant Removal"));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant to Waste"));
    MECC::TraceComment(Translate("=================================================================\nAspirate from waste again to prevent bubbles\n================================================================="));
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MPH_TransferAdapters( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent ) void {
    private variable l_strAspReturn3;
    private variable i_blnIsReagent;
    private variable l_strAspReturn4;
    private variable l_blnFixedHeightDispense;
    private variable l_intCurrentPosition;
    private variable l_intEndPosition;
    private variable l_strReturn3Tip;
    private variable l_intCurrentPositionTipSupport;
    private variable l_blnFixedHeightAspiration;
    private variable l_intNumberOfSamples;
    private variable i_blnIsSample;
    private variable l_strDspReturn3;
    private variable l_fltMaxVolume;
    private variable l_intTipType;
    private variable l_strDspReturn4;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    if(0){
      SeqResetSequenceIndexes(i_seqAspirationPosition);
    }
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqDispensePosition.GetCurrentPosition();
      l_intEndPosition = i_seqDispensePosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MPH_RemoveAndSaveSupernatant( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqLiquidWastePosition, variable i_strLiquidClass1, variable i_strLiquidClass2, variable i_fltTotalVolumeInWells, variable i_fltAdditionalRemoval, variable i_strTrackingFileStatus ) void {
    private variable l_fltMaxAspiration;
    private variable l_strAspReturn3;
    private variable l_strAspReturn4;
    private variable l_fltFirstRemovalVolume;
    private variable l_fltContainerClearance;
    private variable l_intCurrentPosition;
    private variable l_intEndPosition;
    private variable l_strReturn3Tip;
    private variable l_fltDispenseHeight;
    private variable l_intCurrentPositionTipSupport;
    private variable l_intNumberOfSamples;
    private variable l_fltSecondRemovalVolume;
    private variable l_fltContainerDepth;
    private variable l_strDspReturn3;
    private variable l_fltMaxVolume;
    private variable l_intTipType;
    private variable l_fltFinalRemovalVolume;
    private variable l_strDspReturn4;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqAspirationPosition.GetCurrentPosition();
      l_intEndPosition = i_seqAspirationPosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     First Liquid Class:  "), i_strLiquidClass1, Translate("\R     Second Liquid Class:  "), i_strLiquidClass2, Translate("\R     Total Samples:  "), l_intNumberOfSamples, Translate("\R     Total Volume in Wells:  "), i_fltTotalVolumeInWells, Translate("\R     Additional Volume to Remove:  "), i_fltAdditionalRemoval);
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass1, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is for unknown tip type for this framework"), Translate("Please check liquid class for tip type usage"));
    }
    l_fltMaxAspiration = i_fltTotalVolumeInWells + i_fltAdditionalRemoval;
    if (l_fltMaxAspiration > l_fltMaxVolume)
    {
      l_fltFirstRemovalVolume = l_fltMaxAspiration - l_fltMaxVolume;
      l_fltFirstRemovalVolume = l_fltFirstRemovalVolume + 100.0;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Additional Volume to Remove:  "), i_fltAdditionalRemoval, Translate(" uL"), Translate(""));
    l_fltFinalRemovalVolume = i_fltAdditionalRemoval;
    TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("     Final Removal Volume:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
    l_fltSecondRemovalVolume = i_fltTotalVolumeInWells - l_fltFinalRemovalVolume;
    if (l_fltSecondRemovalVolume < 0.0)
    {
      l_fltSecondRemovalVolume = 0.0;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     First Volume to Remove:  "), l_fltFirstRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Second Volume to Remove:  "), l_fltSecondRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Final Volume to Remove:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
    LPQ::CONT_GetContainerDepth(ML_STAR, i_seqLiquidWastePosition, ASWGLOBAL::BOOL::FALSE, l_fltContainerDepth, l_fltContainerClearance);
    l_fltDispenseHeight = l_fltContainerDepth - 5.0;
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    if (l_fltFirstRemovalVolume > 0.0)
    {
      ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
      MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqAspirationPosition, 0.0, 0.0, 3.0, 0.0);
      MECC::TraceComment(Translate("=================================================================\nInitial removal of liquid\n================================================================="));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqAspirationPosition, 0.0, 0.0, -3.0, 0.0);
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        	l_strDspReturn3 = arrRetValues[2];
        	l_strDspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nAspirate from waste again to prevent bubbles\n================================================================="));
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass1, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass1, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant to Waste"));
    }
    ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
    if (l_fltSecondRemovalVolume > 0.0)
    {
      MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqAspirationPosition, 0.0, 0.0, 2.5, 0.0);
      MECC::TraceComment(Translate("=================================================================\nInitial removal of liquid\n================================================================="));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), Translate(""), i_strLiquidClass1, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
      MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqAspirationPosition, 0.0, 0.0, -2.5, 0.0);
    }
    MECC::TraceComment(Translate("=================================================================\nFinal removal of liquid\n================================================================="));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass2, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass2, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
    MECC::TraceComment(Translate("=================================================================\nAspirate from waste again to prevent bubbles\n================================================================="));
    if(0){
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MPH_MixPlateV2( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intMixCount, variable i_intMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent ) void {
    private variable l_strAspReturn3;
    private variable i_blnIsReagent;
    private variable l_strAspReturn4;
    private variable l_blnFixedHeightDispense;
    private variable l_intCurrentPosition;
    private variable l_strReturn3Tip;
    private variable l_intEndPosition;
    private variable l_intCurrentPositionTipSupport;
    private variable l_blnFixedHeightAspiration;
    private variable l_intNumberOfSamples;
    private variable i_blnIsSample;
    private variable l_strDspReturn3;
    private variable l_fltMaxVolume;
    private variable l_intTipType;
    private variable l_strDspReturn4;
    private variable MixLoopCounter;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    SeqResetSequenceIndexes(i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqDispensePosition.GetCurrentPosition();
      l_intEndPosition = i_seqDispensePosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    MECC::TraceComment(Translate("=================================================================\nMix liquid\n================================================================="));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    if(0){
      {
        for(MixLoopCounter = 0; MixLoopCounter < i_intMixCount;)
        {
          MixLoopCounter = MixLoopCounter + 1;
          DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
        }
      }
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        	l_strDspReturn3 = arrRetValues[2];
        	l_strDspReturn4 = arrRetValues[3];
      }
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MPH_ShearPlate( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent, variable & i_intLoopCount ) void {
    private variable l_strAspReturn3;
    private variable i_blnIsReagent;
    private variable l_strAspReturn4;
    private variable l_blnFixedHeightDispense;
    private variable l_intCurrentPosition;
    private variable l_intEndPosition;
    private variable l_strReturn3Tip;
    private variable l_intCurrentPositionTipSupport;
    private variable l_blnFixedHeightAspiration;
    private variable l_intNumberOfSamples;
    private variable i_blnIsSample;
    private variable l_strDspReturn3;
    private variable l_fltMaxVolume;
    private variable l_intTipType;
    private variable l_strDspReturn4;
    private variable loopCounter1;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    SeqResetSequenceIndexes(i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqDispensePosition.GetCurrentPosition();
      l_intEndPosition = i_seqDispensePosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
    {
      for(loopCounter1 = 0; loopCounter1 < i_intLoopCount;)
      {
        loopCounter1 = loopCounter1 + 1;
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----> Shear cycle: "), loopCounter1);
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          	l_strAspReturn3 = arrRetValues[2];
          	l_strAspReturn4 = arrRetValues[3];
        }
        DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
        if(0){
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strDspReturn3 = arrRetValues[2];
            	l_strDspReturn4 = arrRetValues[3];
          }
          DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
        }
      }
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MPH_MixPlateV3( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent ) void {
    private variable l_strAspReturn3;
    private variable i_blnIsReagent;
    private variable l_strAspReturn4;
    private variable l_blnFixedHeightDispense;
    private variable l_intCurrentPosition;
    private variable l_strReturn3Tip;
    private variable l_intEndPosition;
    private variable l_intCurrentPositionTipSupport;
    private variable l_blnFixedHeightAspiration;
    private variable l_intNumberOfSamples;
    private variable i_blnIsSample;
    private variable l_fltMaxVolume;
    private variable l_intTipType;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    SeqResetSequenceIndexes(i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqDispensePosition.GetCurrentPosition();
      l_intEndPosition = i_seqDispensePosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Volume to mix:  "), i_intAspirationMixVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (i_intAspirationMixVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_intAspirationMixVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_SingleDispensePooling( device & ML_STAR, variable i_intAspirationMode, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltTransferVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_blnReuseTips, variable i_strTrackingFileStatus, variable i_blnIsSampleOrReagent, variable i_fltAspVolume, variable i_fltDspVolume ) void {
    private variable l_intAdditionRound;
    private variable i_blnIsReagent;
    private variable l_strChannelPattern;
    private variable l_intTotalChannels;
    private variable l_intTotalPositions;
    private variable l_strAspReturn;
    private variable l_blnFixedHeightDispense;
    private variable i_blnTransferSampleOrReagent;
    private variable l_strLiqReturn;
    private variable l_blnFixedHeightAspiration;
    private variable l_strDspReturn;
    private variable i_blnIsSample;
    private variable l_fltMaxVolume;
    private variable l_intTipType;
    private sequence l_seqAdoptedAspirationPosition;
    private sequence l_seqAdoptedDispensePosition;
    private sequence l_seqDisp;
    private sequence l_seqAsp;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_intAspirationMode > 2)
    {
      VectorCustomDialogs::MessageDialog(Translate("Incorrect Parameter"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Method will abort because of improper aspiration mode"));
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    STAR_TIP_TOOLS::Get1mLChannelCount(ML_STAR, l_intTotalChannels);
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltTransferVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _MatchAspirationToDispenseSequence(i_seqAspirationPosition, i_seqDispensePosition, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition);
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltTransferVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    l_intTotalPositions = SeqGetTotal(l_seqAdoptedDispensePosition);
    {
      l_intAdditionRound = 0;
      while (l_intTotalPositions > 0)
      {
        l_intAdditionRound = l_intAdditionRound + 1;
        l_intTotalPositions = STAR_CHANNEL_TOOLS::CHAN_ACCESS_Sort2Sequences(ML_STAR, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition, 0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_intTotalChannels, l_seqAsp, l_seqDisp, l_strChannelPattern);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Number of Channels: "), l_intTotalChannels);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Channel Pattern: "), l_strChannelPattern);
        MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
        if (i_blnReuseTips == ASWGLOBAL::BOOL::FALSE)
        {
          _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
        }
        else
        {
          if (l_intAdditionRound == 1)
          {
            _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
          }
        }
        MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	l_strAspReturn = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
          	l_strLiqReturn = arrRetValues[2];
        }
        if(0){
          {
            	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
          }
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	l_strDspReturn = arrRetValues[2];
        }
        if (i_blnReuseTips == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, l_strAspReturn, Translate(""), l_strLiqReturn, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
        DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
      }
    }
    if (i_blnReuseTips == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MPH_RemoveAndSaveSupernatant_v2( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_strLiquidClass1, variable i_fltTotalVolumeInWells, variable i_strTrackingFileStatus ) void {
    private variable l_fltMaxAspiration;
    private variable l_strAspReturn3;
    private variable l_strAspReturn4;
    private variable l_fltFirstRemovalVolume;
    private variable l_fltContainerClearance;
    private variable l_intCurrentPosition;
    private variable l_intEndPosition;
    private variable l_strReturn3Tip;
    private variable l_fltDispenseHeight;
    private variable l_intCurrentPositionTipSupport;
    private variable l_intNumberOfSamples;
    private variable l_fltSecondRemovalVolume;
    private variable l_fltContainerDepth;
    private variable l_strDspReturn3;
    private variable l_intTipType;
    private variable l_fltMaxVolume;
    private variable l_fltFinalRemovalVolume;
    private variable l_strDspReturn4;
    private variable i_fltAdditionalRemoval;
    i_fltAdditionalRemoval = 0.0;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqAspirationPosition.GetCurrentPosition();
      l_intEndPosition = i_seqAspirationPosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     First Liquid Class:  "), i_strLiquidClass1, Translate(""), Translate(""), Translate("\R     Total Samples:  "), l_intNumberOfSamples, Translate("\R     Total Volume in Wells:  "), i_fltTotalVolumeInWells, Translate("\R     Additional Volume to Remove:  "), i_fltAdditionalRemoval);
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass1, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is for unknown tip type for this framework"), Translate("Please check liquid class for tip type usage"));
    }
    l_fltMaxAspiration = i_fltTotalVolumeInWells + 0;
    if (l_fltMaxAspiration > l_fltMaxVolume)
    {
      l_fltFirstRemovalVolume = l_fltMaxAspiration - l_fltMaxVolume;
      l_fltFirstRemovalVolume = l_fltFirstRemovalVolume + 100.0;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Additional Volume to Remove:  "), i_fltAdditionalRemoval, Translate(" uL"), Translate(""));
    l_fltFinalRemovalVolume = i_fltAdditionalRemoval;
    TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("     Final Removal Volume:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
    l_fltSecondRemovalVolume = i_fltTotalVolumeInWells - l_fltFinalRemovalVolume;
    if (l_fltSecondRemovalVolume < 0.0)
    {
      l_fltSecondRemovalVolume = 0.0;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     First Volume to Remove:  "), l_fltFirstRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Second Volume to Remove:  "), l_fltSecondRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Final Volume to Remove:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
    if(0){
      LPQ::CONT_GetContainerDepth(ML_STAR, i_seqDispensePosition, ASWGLOBAL::BOOL::FALSE, l_fltContainerDepth, l_fltContainerClearance);
    }
    l_fltDispenseHeight = l_fltContainerDepth - 5.0;
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    if (l_fltFirstRemovalVolume > 0.0)
    {
      ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
      MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqAspirationPosition, 0.0, 0.0, 3.0, 0.0);
      MECC::TraceComment(Translate("=================================================================\nInitial removal of liquid\n================================================================="));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqAspirationPosition, 0.0, 0.0, -3.0, 0.0);
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        	l_strDspReturn3 = arrRetValues[2];
        	l_strDspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nAspirate from waste again to prevent bubbles\n================================================================="));
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass1, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass1, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant to Waste"));
    }
    ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
    if (l_fltSecondRemovalVolume > 0.0)
    {
      MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads - needs to leave 5uL behind\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqAspirationPosition, 0.0, 0.0, 5.0, 0.0);
      MECC::TraceComment(Translate("=================================================================\nRemoval of liquid\n================================================================="));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), Translate(""), i_strLiquidClass1, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
      MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqAspirationPosition, 0.0, 0.0, -5.0, 0.0);
    }
    if(0){
      MECC::TraceComment(Translate("=================================================================\nFinal removal of liquid\n================================================================="));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MPH_SingleDispenseSRE( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent ) void {
    private dialog dialogHandle_13;
    private variable l_strAspReturn3;
    private variable i_blnIsReagent;
    private variable l_strAspReturn4;
    private variable l_blnFixedHeightDispense;
    private variable l_intCurrentPosition;
    private variable l_intEndPosition;
    private variable l_strReturn3Tip;
    private variable l_intCurrentPositionTipSupport;
    private variable l_blnFixedHeightAspiration;
    private variable l_intNumberOfSamples;
    private variable i_blnIsSample;
    private variable l_strDspReturn3;
    private variable l_fltMaxVolume;
    private variable l_intTipType;
    private variable l_strDspReturn4;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    SeqResetSequenceIndexes(i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqDispensePosition.GetCurrentPosition();
      l_intEndPosition = i_seqDispensePosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    if(0){
      dialogHandle_13.SetOutput(l_intNumberOfSamples);
      dialogHandle_13.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MPH_MixPlateV4( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent, variable i_intLoopCount ) void {
    private variable l_strAspReturn3;
    private variable i_blnIsReagent;
    private variable l_strAspReturn4;
    private variable l_blnFixedHeightDispense;
    private variable l_intCurrentPosition;
    private variable l_strReturn3Tip;
    private variable l_intEndPosition;
    private variable loopCounter1;
    private variable l_intCurrentPositionTipSupport;
    private variable l_blnFixedHeightAspiration;
    private variable l_intNumberOfSamples;
    private variable i_blnIsSample;
    private variable l_strDspReturn3;
    private variable l_fltMaxVolume;
    private variable l_intTipType;
    private variable l_strDspReturn4;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    SeqResetSequenceIndexes(i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqDispensePosition.GetCurrentPosition();
      l_intEndPosition = i_seqDispensePosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Volume to Mix:  "), i_intAspirationMixVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_intAspirationMixVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
    {
      for(loopCounter1 = 0; loopCounter1 < i_intLoopCount;)
      {
        loopCounter1 = loopCounter1 + 1;
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          	l_strAspReturn3 = arrRetValues[2];
          	l_strAspReturn4 = arrRetValues[3];
        }
        DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
        if(0){
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strDspReturn3 = arrRetValues[2];
            	l_strDspReturn4 = arrRetValues[3];
          }
          DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
        }
      }
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MPH_AspirateAllForStamp( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent, variable i_fltSpeedFactor ) void {
    private variable l_strAspReturn3;
    private variable i_blnIsReagent;
    private variable l_strAspReturn4;
    private variable l_blnFixedHeightDispense;
    private variable l_intCurrentPosition;
    private variable l_strReturn3Tip;
    private variable l_intEndPosition;
    private variable l_intCurrentPositionTipSupport;
    private variable l_blnFixedHeightAspiration;
    private variable l_intNumberOfSamples;
    private variable i_blnIsSample;
    private variable l_strDspReturn3;
    private variable l_intTipType;
    private variable l_fltMaxVolume;
    private variable l_strDspReturn4;
    if(0){
      i_fltVolume = i_fltVolume + 10;
    }
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    SeqResetSequenceIndexes(i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqDispensePosition.GetCurrentPosition();
      l_intEndPosition = i_seqDispensePosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
    ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MultiDsp_OneChannel( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_strLiquidClass, variable i_fltVolume, variable i_fltPreDispenseVolume, variable i_fltPostDispenseVolume, variable i_fltDispenseHeight, variable i_strTrackingFileStatus ) void {
    private variable l_fltSourceDepth;
    private variable l_intPartialLoop;
    private variable l_intPartialIndex;
    private variable l_intTotalWells;
    private variable l_intRemainingWells;
    private variable l_intRemainder;
    private variable l_intAdjustedIndex;
    private variable l_strChannelPattern;
    private variable l_fltNotUsed;
    private variable l_intDispIndex;
    private variable l_intDispenseCount;
    private variable l_intChannelIndex;
    private variable l_intTotalChannels;
    private variable l_blnProgressSequence;
    private variable l_fltMaxReagentVolume;
    private variable l_intAspirationRounds;
    private variable l_intTotalDispensesAllChannels;
    private variable l_strAspReturn;
    private variable l_intCurrentPosition;
    private variable l_fltAspirationVolume;
    private variable l_fltDestDepth;
    private variable l_intEndPosition;
    private variable l_fltLiquidLevel;
    private variable l_fltDispenseHeight;
    private variable l_strLiqReturn;
    private variable l_intTotalWellsAspiration;
    private variable l_intActiveChannels;
    private variable l_strDspReturn;
    private variable l_intAspirationIndex;
    private variable l_intMaxDispensesPerChannel;
    private variable l_fltMaxVolume;
    private variable l_intTipType;
    private sequence l_seqAdoptedDestinationPosition;
    private sequence l_seqAdoptedAspirationPosition;
    private variable l_arrDispenseHeights[];
    private variable l_arrPartialPatterns[];
    private dialog dialogHandle1;
    private dialog dialogHandle_14;
    private dialog dialogHandle_15;
    private dialog dialogHandle_16;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    if(0){
      STAR_TIP_TOOLS::Get1mLChannelCount(ML_STAR, l_intTotalChannels);
      dialogHandle1.SetOutput(l_intTotalChannels);
      dialogHandle1.ShowOutput(Translate("l_intTotalChannels"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    l_intTotalChannels = 1;
    l_intCurrentPosition = i_seqAspirationPosition.GetCurrentPosition();
    l_intEndPosition = i_seqAspirationPosition.GetCount();
    l_intTotalWellsAspiration = l_intEndPosition - l_intCurrentPosition;
    l_intTotalWellsAspiration = l_intTotalWellsAspiration + 1;
    _MatchAspirationToDispenseSequence(i_seqAspirationPosition, i_seqDispensePosition, l_seqAdoptedAspirationPosition, l_seqAdoptedDestinationPosition);
    l_intCurrentPosition = i_seqDispensePosition.GetCurrentPosition();
    l_intEndPosition = i_seqDispensePosition.GetCount();
    l_intTotalWells = l_intEndPosition - l_intCurrentPosition;
    l_intTotalWells = l_intTotalWells + 1;
    LPQ::CONT_GetContainerDepth(ML_STAR, i_seqAspirationPosition, ASWGLOBAL::BOOL::FALSE, l_fltSourceDepth, l_fltNotUsed);
    LPQ::CONT_GetContainerDepth(ML_STAR, i_seqDispensePosition, ASWGLOBAL::BOOL::FALSE, l_fltDestDepth, l_fltNotUsed);
    l_fltDispenseHeight = i_fltDispenseHeight;
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r     Transfer Volume:  "), i_fltVolume, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    l_fltMaxReagentVolume = l_fltMaxVolume - i_fltPostDispenseVolume;
    l_fltMaxReagentVolume = l_fltMaxReagentVolume - i_fltPreDispenseVolume;
    l_intMaxDispensesPerChannel = l_fltMaxReagentVolume / i_fltVolume;
    l_intMaxDispensesPerChannel = MthFloor(l_intMaxDispensesPerChannel);
    l_intTotalDispensesAllChannels = l_intMaxDispensesPerChannel * l_intTotalChannels;
    TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, Translate("     l_fltMaxVolume:  "), l_fltMaxVolume, Translate("\r     l_fltMaxReagentVolume:  "), l_fltMaxReagentVolume, Translate("\r     l_intMaxDispensesPerChannel:  "), l_intMaxDispensesPerChannel, Translate("\r     l_intTotalChannels:  "), l_intTotalChannels, Translate("\r     l_intTotalDispensesAllChannels:  "), l_intTotalDispensesAllChannels);
    l_intAspirationRounds = l_intTotalWells / l_intTotalDispensesAllChannels;
    l_intAspirationRounds = MthFloor(l_intAspirationRounds);
    l_intRemainder = l_intTotalWells % l_intTotalDispensesAllChannels;
    if (l_intRemainder > 0)
    {
      l_intAspirationRounds = l_intAspirationRounds + 1;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Aspiration Rounds Needed:  "), l_intAspirationRounds, Translate(""), Translate(""));
    STAR_TIP_TOOLS::BuildChannelPattern(l_intTotalChannels, l_intTotalChannels, l_strChannelPattern);
    l_strChannelPattern = Translate("10000000");
    l_intRemainingWells = l_intTotalWells;
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("     l_intRemainingWells:  "), l_intRemainingWells);
    ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
    {
      for(l_intAspirationIndex = 0; l_intAspirationIndex < l_intAspirationRounds;)
      {
        l_intAspirationIndex = l_intAspirationIndex + 1;
        l_intDispenseCount = l_intRemainingWells / l_intTotalChannels;
        if(0){
          dialogHandle_15.SetOutput(Translate("loop counter for multi dispense: "), l_intAspirationIndex, "\n", l_intDispenseCount, Translate("Dispense Count: "), "\n", Translate("Remaining wells: "), l_intRemainingWells, "\n", Translate("int total channels: "), l_intTotalChannels, "\n", Translate("Volume of Aspiration: "), Translate(""));
          dialogHandle_15.ShowOutput(Translate("l_intDispenseCount"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        l_intDispenseCount = MthFloor(l_intDispenseCount);
        l_intRemainder = l_intRemainingWells % l_intTotalChannels;
        if (l_intRemainder > 0)
        {
          l_intDispenseCount = l_intDispenseCount + 1;
        }
        if (l_intDispenseCount > l_intMaxDispensesPerChannel)
        {
          l_intDispenseCount = l_intMaxDispensesPerChannel;
        }
        l_fltAspirationVolume = i_fltVolume * l_intDispenseCount;
        if (i_fltPostDispenseVolume > 0.0)
        {
          l_fltAspirationVolume = l_fltAspirationVolume + i_fltPostDispenseVolume;
        }
        if (i_fltPreDispenseVolume > 0.0)
        {
          l_fltAspirationVolume = l_fltAspirationVolume + i_fltPreDispenseVolume;
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Remaining Wells:  "), l_intRemainingWells);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Aspiration Volume:  "), l_fltAspirationVolume);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Dispense Count:  "), l_intDispenseCount);
        if(0){
          dialogHandle_16.SetOutput(Translate("loop counter for multi dispense: "), l_intAspirationIndex, "\n", l_intDispenseCount, Translate("Dispense Count: "), "\n", Translate("Remaining wells: "), l_intRemainingWells, "\n", Translate("int total channels: "), l_intTotalChannels, "\n", Translate("Volume of Aspiration: "), l_fltAspirationVolume);
          dialogHandle_16.ShowOutput(Translate("l_intDispenseCount"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
        _GetPartialChannelPatternForAspiration(ML_STAR, l_strChannelPattern, l_intTotalWellsAspiration, l_intPartialLoop, l_arrPartialPatterns);
        l_arrDispenseHeights.SetSize(0);
        {
          for(l_intChannelIndex = 0; l_intChannelIndex < l_intTotalChannels;)
          {
            l_intChannelIndex = l_intChannelIndex + 1;
            l_arrDispenseHeights.AddAsLast(0.0);
          }
        }
        MECC::TraceComment(Translate("======================================================================\nAspirate Reagent and pre dispense\n======================================================================"));
        {
          for(l_intPartialIndex = 0; l_intPartialIndex < l_intPartialLoop;)
          {
            l_intPartialIndex = l_intPartialIndex + 1;
            l_strDspReturn = Translate("");
            MECC::TraceComment(Translate("======================================================================\nAspirate Reagent\n======================================================================"));
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	l_strAspReturn = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
              	l_strLiqReturn = arrRetValues[2];
            }
            l_intActiveChannels = StrReplace(l_arrPartialPatterns.ElementAt( l_intPartialIndex -1), Translate("1"), Translate("1"));
            {
              for(l_intChannelIndex = 0; l_intChannelIndex < l_intActiveChannels;)
              {
                l_intChannelIndex = l_intChannelIndex + 1;
                l_intAdjustedIndex = l_intPartialIndex - 1;
                l_intAdjustedIndex = l_intAdjustedIndex * l_intActiveChannels;
                l_intAdjustedIndex = l_intAdjustedIndex + l_intChannelIndex;
                STAR_CHANNEL_TOOLS::LIQUID_LEVEL_GetLiquidLevelHeight(ML_STAR, l_strLiqReturn, l_seqAdoptedAspirationPosition, l_intAdjustedIndex, l_fltLiquidLevel);
                l_arrDispenseHeights.SetAt(l_intAdjustedIndex-1, l_fltLiquidLevel);
              }
            }
            Util2::Debug::TraceArray(Translate("Dispense Heights"), l_arrDispenseHeights);
            DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, l_strAspReturn, Translate(""), l_strLiqReturn, i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
            if (i_fltPreDispenseVolume > 0.0)
            {
              MECC::TraceComment(Translate("======================================================================\nPre-Dispense\n======================================================================"));
              l_blnProgressSequence = 0;
              if (i_fltPostDispenseVolume == 0.0)
              {
                l_blnProgressSequence = 1;
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strDspReturn = arrRetValues[2];
              }
            }
            DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
          }
        }
        MECC::TraceComment(Translate("======================================================================\nMulti-Dispense\n======================================================================"));
        {
          l_intDispIndex = 0;
          while (
             (i_seqDispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seqDispensePosition, 1);
            l_intDispIndex = l_intDispIndex + 1;
            if (l_intDispIndex > l_intDispenseCount)
            {
              break;
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	l_strDspReturn = arrRetValues[2];
            }
            DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
            if (
               (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
        }
        if(0){
          MECC::TraceComment(Translate("======================================================================\nPost-Dispense\n======================================================================"));
          {
            for(l_intPartialIndex = 0; l_intPartialIndex < l_intPartialLoop;)
            {
              l_intPartialIndex = l_intPartialIndex + 1;
              if (i_fltPreDispenseVolume > 0.0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strDspReturn = arrRetValues[2];
                }
                DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
              }
            }
          }
        }
        MECC::TraceComment(Translate("======================================================================\nEject\n======================================================================"));
        if(0){
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if(0){
          dialogHandle_14.SetOutput(Translate("Adjust these for next loop "), "\n", Translate("loop counter for multi dispense: "), l_intAspirationIndex, "\n", l_intDispenseCount, Translate("Dispense Count: "), "\n", Translate("Remaining wells: "), l_intRemainingWells, "\n", Translate("int total channels: "), l_intTotalChannels);
          dialogHandle_14.ShowOutput(Translate("l_intDispenseCount"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        l_intRemainingWells = l_intRemainingWells - l_intDispenseCount;
      }
    }
    ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MultiDispense_V2( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_strLiquidClass, variable i_fltVolume, variable i_fltPreDispenseVolume, variable i_fltPostDispenseVolume, variable i_fltDispenseHeight, variable i_strTrackingFileStatus, variable i_intDispenseToSource ) void {
    private variable l_fltSourceDepth;
    private variable l_intPartialLoop;
    private variable l_intPartialIndex;
    private variable l_intTotalWells;
    private variable l_intRemainingWells;
    private variable l_intAdjustedIndex;
    private variable l_intRemainder;
    private variable l_strChannelPattern;
    private variable l_intDispIndex;
    private variable l_intChannelIndex;
    private variable l_intDispenseCount;
    private variable l_fltNotUsed;
    private variable l_intTotalChannels;
    private variable l_blnProgressSequence;
    private variable l_fltMaxReagentVolume;
    private variable l_intTotalDispensesAllChannels;
    private variable l_intAspirationRounds;
    private variable l_strAspReturn;
    private variable l_intCurrentPosition;
    private variable l_fltAspirationVolume;
    private variable l_fltDestDepth;
    private variable l_intEndPosition;
    private variable l_fltLiquidLevel;
    private variable l_fltDispenseHeight;
    private variable l_strLiqReturn;
    private variable l_intTotalWellsAspiration;
    private variable l_intActiveChannels;
    private variable l_strDspReturn;
    private variable l_intAspirationIndex;
    private variable l_intTipType;
    private variable l_fltMaxVolume;
    private variable l_intMaxDispensesPerChannel;
    private sequence l_seqAdoptedDestinationPosition;
    private sequence l_seqAdoptedAspirationPosition;
    private variable l_arrDispenseHeights[];
    private variable l_arrPartialPatterns[];
    private dialog dialogHandle_17;
    private dialog dialogHandle_18;
    private dialog dialogHandle_19;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    STAR_TIP_TOOLS::Get1mLChannelCount(ML_STAR, l_intTotalChannels);
    l_intCurrentPosition = i_seqAspirationPosition.GetCurrentPosition();
    l_intEndPosition = i_seqAspirationPosition.GetCount();
    l_intTotalWellsAspiration = l_intEndPosition - l_intCurrentPosition;
    l_intTotalWellsAspiration = l_intTotalWellsAspiration + 1;
    _MatchAspirationToDispenseSequence(i_seqAspirationPosition, i_seqDispensePosition, l_seqAdoptedAspirationPosition, l_seqAdoptedDestinationPosition);
    l_intCurrentPosition = i_seqDispensePosition.GetCurrentPosition();
    l_intEndPosition = i_seqDispensePosition.GetCount();
    l_intTotalWells = l_intEndPosition - l_intCurrentPosition;
    l_intTotalWells = l_intTotalWells + 1;
    LPQ::CONT_GetContainerDepth(ML_STAR, i_seqAspirationPosition, ASWGLOBAL::BOOL::FALSE, l_fltSourceDepth, l_fltNotUsed);
    LPQ::CONT_GetContainerDepth(ML_STAR, i_seqDispensePosition, ASWGLOBAL::BOOL::FALSE, l_fltDestDepth, l_fltNotUsed);
    l_fltDispenseHeight = i_fltDispenseHeight;
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r     Transfer Volume:  "), i_fltVolume, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    l_fltMaxReagentVolume = l_fltMaxVolume - i_fltPostDispenseVolume;
    l_fltMaxReagentVolume = l_fltMaxReagentVolume - i_fltPreDispenseVolume;
    l_intMaxDispensesPerChannel = l_fltMaxReagentVolume / i_fltVolume;
    l_intMaxDispensesPerChannel = MthFloor(l_intMaxDispensesPerChannel);
    l_intTotalDispensesAllChannels = l_intMaxDispensesPerChannel * l_intTotalChannels;
    TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, Translate("     l_fltMaxVolume:  "), l_fltMaxVolume, Translate("\r     l_fltMaxReagentVolume:  "), l_fltMaxReagentVolume, Translate("\r     l_intMaxDispensesPerChannel:  "), l_intMaxDispensesPerChannel, Translate("\r     l_intTotalChannels:  "), l_intTotalChannels, Translate("\r     l_intTotalDispensesAllChannels:  "), l_intTotalDispensesAllChannels);
    l_intAspirationRounds = l_intTotalWells / l_intTotalDispensesAllChannels;
    l_intAspirationRounds = MthFloor(l_intAspirationRounds);
    l_intRemainder = l_intTotalWells % l_intTotalDispensesAllChannels;
    if (l_intRemainder > 0)
    {
      l_intAspirationRounds = l_intAspirationRounds + 1;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Aspiration Rounds Needed:  "), l_intAspirationRounds, Translate(""), Translate(""));
    STAR_TIP_TOOLS::BuildChannelPattern(l_intTotalChannels, l_intTotalChannels, l_strChannelPattern);
    l_intRemainingWells = l_intTotalWells;
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("     l_intRemainingWells:  "), l_intRemainingWells);
    ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
    {
      for(l_intAspirationIndex = 0; l_intAspirationIndex < l_intAspirationRounds;)
      {
        l_intAspirationIndex = l_intAspirationIndex + 1;
        l_intDispenseCount = l_intRemainingWells / l_intTotalChannels;
        l_intDispenseCount = MthFloor(l_intDispenseCount);
        l_intRemainder = l_intRemainingWells % l_intTotalChannels;
        if (l_intRemainder > 0)
        {
          l_intDispenseCount = l_intDispenseCount + 1;
        }
        if (l_intDispenseCount > l_intMaxDispensesPerChannel)
        {
          l_intDispenseCount = l_intMaxDispensesPerChannel;
        }
        l_fltAspirationVolume = i_fltVolume * l_intDispenseCount;
        if (i_fltPostDispenseVolume > 0.0)
        {
          l_fltAspirationVolume = l_fltAspirationVolume + i_fltPostDispenseVolume;
        }
        if (i_fltPreDispenseVolume > 0.0)
        {
          l_fltAspirationVolume = l_fltAspirationVolume + i_fltPreDispenseVolume;
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Remaining Wells:  "), l_intRemainingWells);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Aspiration Volume:  "), l_fltAspirationVolume);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Dispense Count:  "), l_intDispenseCount);
        if(0){
          dialogHandle_17.SetOutput(Translate("loop counter for multi dispense: "), l_intAspirationIndex, "\n", l_intDispenseCount, Translate("Dispense Count: "), "\n", Translate("Remaining wells: "), l_intRemainingWells, "\n", Translate("int total channels: "), l_intTotalChannels, "\n", Translate("Volume of Aspiration: "), l_fltAspirationVolume);
          dialogHandle_17.ShowOutput(Translate("l_intDispenseCount"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
        _GetPartialChannelPatternForAspiration(ML_STAR, l_strChannelPattern, l_intTotalWellsAspiration, l_intPartialLoop, l_arrPartialPatterns);
        l_arrDispenseHeights.SetSize(0);
        {
          for(l_intChannelIndex = 0; l_intChannelIndex < l_intTotalChannels;)
          {
            l_intChannelIndex = l_intChannelIndex + 1;
            l_arrDispenseHeights.AddAsLast(0.0);
          }
        }
        MECC::TraceComment(Translate("======================================================================\nAspirate Reagent and pre dispense\n======================================================================"));
        {
          for(l_intPartialIndex = 0; l_intPartialIndex < l_intPartialLoop;)
          {
            l_intPartialIndex = l_intPartialIndex + 1;
            l_strDspReturn = Translate("");
            MECC::TraceComment(Translate("======================================================================\nAspirate Reagent\n======================================================================"));
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	l_strAspReturn = arrRetValues[2];
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
              	l_strLiqReturn = arrRetValues[2];
            }
            l_intActiveChannels = StrReplace(l_arrPartialPatterns.ElementAt( l_intPartialIndex -1), Translate("1"), Translate("1"));
            {
              for(l_intChannelIndex = 0; l_intChannelIndex < l_intActiveChannels;)
              {
                l_intChannelIndex = l_intChannelIndex + 1;
                l_intAdjustedIndex = l_intPartialIndex - 1;
                l_intAdjustedIndex = l_intAdjustedIndex * l_intActiveChannels;
                l_intAdjustedIndex = l_intAdjustedIndex + l_intChannelIndex;
                STAR_CHANNEL_TOOLS::LIQUID_LEVEL_GetLiquidLevelHeight(ML_STAR, l_strLiqReturn, l_seqAdoptedAspirationPosition, l_intAdjustedIndex, l_fltLiquidLevel);
                l_arrDispenseHeights.SetAt(l_intAdjustedIndex-1, l_fltLiquidLevel);
              }
            }
            Util2::Debug::TraceArray(Translate("Dispense Heights"), l_arrDispenseHeights);
            DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, l_strAspReturn, Translate(""), l_strLiqReturn, i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
            if (i_fltPreDispenseVolume > 0.0)
            {
              MECC::TraceComment(Translate("======================================================================\nPre-Dispense\n======================================================================"));
              l_blnProgressSequence = 0;
              if (i_fltPostDispenseVolume == 0.0)
              {
                l_blnProgressSequence = 1;
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strDspReturn = arrRetValues[2];
              }
            }
            DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
          }
        }
        MECC::TraceComment(Translate("======================================================================\nMulti-Dispense\n======================================================================"));
        {
          l_intDispIndex = 0;
          while (
             (i_seqDispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seqDispensePosition, 1);
            l_intDispIndex = l_intDispIndex + 1;
            if (l_intDispIndex > l_intDispenseCount)
            {
              break;
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	l_strDspReturn = arrRetValues[2];
            }
            DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
            if (
               (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
        }
        MECC::TraceComment(Translate("======================================================================\nPost-Dispense\n======================================================================"));
        if (i_intDispenseToSource == 1)
        {
          {
            for(l_intPartialIndex = 0; l_intPartialIndex < l_intPartialLoop;)
            {
              l_intPartialIndex = l_intPartialIndex + 1;
              if (i_fltPreDispenseVolume > 0.0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strDspReturn = arrRetValues[2];
                }
                DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
              }
            }
          }
        }
        MECC::TraceComment(Translate("======================================================================\nEject\n======================================================================"));
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if(0){
          dialogHandle_19.SetOutput(Translate("Adjust these for next loop "), "\n", Translate("loop counter for multi dispense: "), l_intAspirationIndex, "\n", l_intDispenseCount, Translate("Dispense Count: "), "\n", Translate("Remaining wells: "), l_intRemainingWells, "\n", Translate("int total channels: "), l_intTotalChannels);
          dialogHandle_19.ShowOutput(Translate("l_intDispenseCount"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        l_intDispenseCount = l_intDispenseCount * 8;
        l_intRemainingWells = l_intRemainingWells - l_intDispenseCount;
        if(0){
          dialogHandle_18.SetOutput(Translate("Adjust these for next loop "), "\n", Translate("loop counter for multi dispense: "), l_intAspirationIndex, "\n", l_intDispenseCount, Translate("Dispense Count: "), "\n", Translate("Remaining wells: "), l_intRemainingWells, "\n", Translate("int total channels: "), l_intTotalChannels);
          dialogHandle_18.ShowOutput(Translate("l_intDispenseCount"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
      }
    }
    ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MPH_ShearPlateV2( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_blnLiquidFollowingAspiration, variable i_blnLiquidFollowingDispense, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_strTrackingFileStatus, variable i_blnTransferSampleOrReagent, variable i_intLoopCount ) void {
    private variable l_strAspReturn3;
    private variable i_blnIsReagent;
    private variable l_strAspReturn4;
    private variable l_blnFixedHeightDispense;
    private variable l_intCurrentPosition;
    private variable l_intEndPosition;
    private variable l_strReturn3Tip;
    private variable loopCounter1;
    private variable l_intCurrentPositionTipSupport;
    private variable l_blnFixedHeightAspiration;
    private variable l_intNumberOfSamples;
    private variable i_blnIsSample;
    private variable l_strDspReturn3;
    private variable l_fltMaxVolume;
    private variable l_intTipType;
    private variable l_strDspReturn4;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    SeqResetSequenceIndexes(i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqDispensePosition.GetCurrentPosition();
      l_intEndPosition = i_seqDispensePosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
    {
      for(loopCounter1 = 0; loopCounter1 < i_intLoopCount;)
      {
        loopCounter1 = loopCounter1 + 1;
        VectorCustomDialogs::AppendStatusText(loopCounter1);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----> Shear cycle: "), loopCounter1);
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          	l_strAspReturn3 = arrRetValues[2];
          	l_strAspReturn4 = arrRetValues[3];
        }
        DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
        if(0){
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strDspReturn3 = arrRetValues[2];
            	l_strDspReturn4 = arrRetValues[3];
          }
          DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
        }
      }
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_MPH_EthanolWashV2_HSP( device & ML_STAR, sequence i_seqEthanolPosition, sequence i_seqMIDIPlatePosition, sequence i_seqLiquidWastePosition, variable i_fltEthanolAdditionVolume, variable i_fltEthanolTotalRemovalVolume, variable i_fltAdditionalRemoval, variable i_strLiquidClassEthanolAddition, variable i_strLiquidClassFirstRemoval, variable i_strLiquidClassSecondRemoval, variable i_strTrackingFileStatus ) void {
    private dialog dialogHandle_20;
    private dialog dialogHandle_21;
    private dialog dialogHandle_22;
    private dialog dialogHandle_23;
    private variable l_fltMaxAspiration;
    private variable l_strAspReturn3;
    private variable l_fltFirstRemovalVolume;
    private variable l_strAspReturn4;
    private variable l_fltContainerClearance;
    private variable l_intCurrentPosition;
    private variable l_intEndPosition;
    private variable l_strReturn3Tip;
    private variable l_fltDispenseHeight;
    private variable l_intCurrentPositionTipSupport;
    private variable l_intNumberOfSamples;
    private variable l_fltSecondRemovalVolume;
    private variable l_fltContainerDepth;
    private variable l_strDspReturn3;
    private variable l_intTipType;
    private variable l_fltMaxVolume;
    private variable l_fltFinalRemovalVolume;
    private variable l_strDspReturn4;
    private timer l_hdlTimerEthanolWash;
    private timer l_hdlEthanolCollectTimer;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqTipSupport);
    l_intCurrentPositionTipSupport = t_seqTipSupport.GetCurrentPosition();
    if (l_intCurrentPositionTipSupport > 0)
    {
      l_intCurrentPosition = i_seqMIDIPlatePosition.GetCurrentPosition();
      l_intEndPosition = i_seqMIDIPlatePosition.GetCount();
      l_intNumberOfSamples = l_intEndPosition - l_intCurrentPosition;
    }
    else
    {
      l_intNumberOfSamples = 96;
    }
    SeqResetSequenceIndexes(i_seqEthanolPosition);
    SeqResetSequenceIndexes(i_seqMIDIPlatePosition);
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqEthanolPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqMIDIPlatePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClassEthanolAddition, Translate("\r"), Translate("     Transfer Volume:  "), i_fltEthanolAdditionVolume, Translate("\r"), Translate("     Ethanol Volume to Remove:  "), i_fltEthanolTotalRemovalVolume, Translate(""), Translate(""));
    _DetermineTipTypeFromLiquidClass(i_strLiquidClassEthanolAddition, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltEthanolAdditionVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
    l_strReturn3Tip = _PickUpTipsBasedOnTipTypeMPH96(ML_STAR, l_intNumberOfSamples, l_intTipType);
    MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), l_strReturn3Tip, i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, Translate("Ethanol addition"));
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Ethanol addition"));
    DATACONTROLLER::TIME_TimerStart(30, Translate("Ethanol Wash Timer"), ASWGLOBAL::BOOL::TRUE, l_hdlTimerEthanolWash);
    MECC::TraceComment(Translate("=================================================================\n\nREMOVE SUPERNATANT\n\n================================================================="));
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     First Liquid Class:  "), i_strLiquidClassFirstRemoval, Translate("\R     Second Liquid Class:  "), i_strLiquidClassSecondRemoval, Translate("\R     Total Samples:  "), l_intNumberOfSamples, Translate("\R     Total Volume in Wells:  "), i_fltEthanolAdditionVolume, Translate(""), Translate(""));
    i_fltEthanolTotalRemovalVolume = i_fltEthanolTotalRemovalVolume + 20.0;
    l_fltMaxAspiration = i_fltEthanolTotalRemovalVolume + 0;
    if (l_fltMaxAspiration > l_fltMaxVolume)
    {
      l_fltFirstRemovalVolume = l_fltMaxAspiration - l_fltMaxVolume;
      l_fltFirstRemovalVolume = l_fltFirstRemovalVolume + 100.0;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Additional Volume to Remove:  "), i_fltAdditionalRemoval, Translate(" uL"), Translate(""));
    l_fltFinalRemovalVolume = i_fltAdditionalRemoval;
    TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("     Final Removal Volume:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
    l_fltSecondRemovalVolume = i_fltEthanolTotalRemovalVolume - i_fltAdditionalRemoval;
    if (l_fltSecondRemovalVolume < 0.0)
    {
      l_fltSecondRemovalVolume = 0.0;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     First Volume to Remove:  "), l_fltFirstRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Second Volume to Remove:  "), l_fltSecondRemovalVolume, Translate(" uL"), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     Final Volume to Remove:  "), l_fltFinalRemovalVolume, Translate(" uL"), Translate(""));
    LPQ::CONT_GetContainerDepth(ML_STAR, i_seqLiquidWastePosition, ASWGLOBAL::BOOL::FALSE, l_fltContainerDepth, l_fltContainerClearance);
    l_fltDispenseHeight = l_fltContainerDepth - 5.0;
    if (l_fltFirstRemovalVolume > 0.0)
    {
      if(0){
        dialogHandle_21.SetOutput(Translate("First removal about to begin"));
        dialogHandle_21.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
      MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqMIDIPlatePosition, 0.0, 0.0, 5.0, 0.0);
      MECC::TraceComment(Translate("=================================================================\nInitial removal of liquid\n================================================================="));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqMIDIPlatePosition, 0.0, 0.0, -5.0, 0.0);
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        	l_strDspReturn3 = arrRetValues[2];
        	l_strDspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nAspirate from waste again to prevent bubbles\n================================================================="));
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), Translate(""), i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant to Waste"));
      if(0){
        dialogHandle_23.SetOutput(Translate("First removal finished"));
        dialogHandle_23.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
    if (l_fltSecondRemovalVolume > 0.0)
    {
      if(0){
        dialogHandle_20.SetOutput(Translate("Starting intermediate removal."), "\n", Translate("This step is going to remove: "), l_fltSecondRemovalVolume, Translate(" uL of ethanol"));
        dialogHandle_20.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      MECC::TraceComment(Translate("=================================================================\nOffset z bottom to prevent tracking into the beads\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqMIDIPlatePosition, 0.0, 0.0, 2.5, 0.0);
      MECC::TraceComment(Translate("=================================================================\nInitial removal of liquid\n================================================================="));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	l_strAspReturn3 = arrRetValues[2];
        	l_strAspReturn4 = arrRetValues[3];
      }
      MECC::TraceComment(Translate("=================================================================\nReset the bottom back to 0\n================================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, i_seqMIDIPlatePosition, 0.0, 0.0, -2.5, 0.0);
      DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), Translate(""), i_strLiquidClassSecondRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant Removal"));
    }
    DATACONTROLLER::TIME_TimerStart(5, Translate("EthanolCollectTimer"), ASWGLOBAL::BOOL::TRUE, l_hdlEthanolCollectTimer);
    MECC::TraceComment(Translate("=================================================================\nFinal removal of liquid\n================================================================="));
    if(0){
      dialogHandle_22.SetOutput(Translate("Please check plate here. There should be: "), i_fltAdditionalRemoval, Translate(" uL left in the well"));
      dialogHandle_22.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	l_strAspReturn3 = arrRetValues[2];
      	l_strAspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, l_strAspReturn3, l_strAspReturn4, Translate(""), Translate(""), Translate(""), i_strLiquidClassSecondRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Final Supernatant Removal"));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	l_strDspReturn3 = arrRetValues[2];
      	l_strDspReturn4 = arrRetValues[3];
    }
    DATACONTROLLER::FILE_UpdateTransferReportMPH(ML_STAR, Translate(""), Translate(""), l_strDspReturn3, l_strDspReturn4, Translate(""), i_strLiquidClassFirstRemoval, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("Supernatant to Waste"));
    MECC::TraceComment(Translate("=================================================================\nAspirate from waste again to prevent bubbles\n================================================================="));
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_ShearPlate( device & ML_STAR, variable i_intAspirationMode, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltTransferVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_blnReuseTips, variable i_strTrackingFileStatus, variable i_blnIsSampleOrReagent ) void {
    private variable i_blnIsReagent;
    private variable l_intAdditionRound;
    private variable l_strChannelPattern;
    private variable l_intTotalChannels;
    private variable l_intTotalPositions;
    private variable l_strAspReturn;
    private variable l_blnFixedHeightDispense;
    private variable i_blnTransferSampleOrReagent;
    private variable l_strLiqReturn;
    private variable l_blnFixedHeightAspiration;
    private variable l_strDspReturn;
    private variable i_blnIsSample;
    private variable l_fltMaxVolume;
    private variable l_intTipType;
    private sequence l_seqAdoptedAspirationPosition;
    private sequence l_seqAdoptedDispensePosition;
    private sequence l_seqDisp;
    private sequence l_seqAsp;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_intAspirationMode > 2)
    {
      VectorCustomDialogs::MessageDialog(Translate("Incorrect Parameter"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Method will abort because of improper aspiration mode"));
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    STAR_TIP_TOOLS::Get1mLChannelCount(ML_STAR, l_intTotalChannels);
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltTransferVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _MatchAspirationToDispenseSequence(i_seqAspirationPosition, i_seqDispensePosition, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition);
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltTransferVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    l_intTotalPositions = SeqGetTotal(l_seqAdoptedDispensePosition);
    {
      l_intAdditionRound = 0;
      while (l_intTotalPositions > 0)
      {
        l_intAdditionRound = l_intAdditionRound + 1;
        l_intTotalPositions = STAR_CHANNEL_TOOLS::CHAN_ACCESS_Sort2Sequences(ML_STAR, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition, 0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_intTotalChannels, l_seqAsp, l_seqDisp, l_strChannelPattern);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Number of Channels: "), l_intTotalChannels);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Channel Pattern: "), l_strChannelPattern);
        MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
        if (i_blnReuseTips == ASWGLOBAL::BOOL::FALSE)
        {
          _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
        }
        else
        {
          if (l_intAdditionRound == 1)
          {
            _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
          }
        }
        MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	l_strAspReturn = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
          	l_strLiqReturn = arrRetValues[2];
        }
        if(0){
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            	l_strDspReturn = arrRetValues[2];
          }
        }
        if (i_blnReuseTips == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, l_strAspReturn, Translate(""), l_strLiqReturn, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
        if(0){
          DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
        }
      }
    }
    if (i_blnReuseTips == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  function PIP_SingleDispense_pLLD( device & ML_STAR, variable i_intAspirationMode, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltTransferVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intAspirationMixCount, variable i_intAspirationMixVolume, variable i_intDispenseMixCount, variable i_intDispenseMixVolume, variable i_blnReuseTips, variable i_strTrackingFileStatus, variable i_blnIsSampleOrReagent ) void {
    private variable i_blnIsReagent;
    private variable l_intAdditionRound;
    private variable l_strChannelPattern;
    private variable l_intTotalPositions;
    private variable l_intTotalChannels;
    private variable l_strAspReturn;
    private variable l_blnFixedHeightDispense;
    private variable i_blnTransferSampleOrReagent;
    private variable l_strLiqReturn;
    private variable l_blnFixedHeightAspiration;
    private variable l_strDspReturn;
    private variable i_blnIsSample;
    private variable l_fltMaxVolume;
    private variable l_intTipType;
    private sequence l_seqAdoptedAspirationPosition;
    private sequence l_seqAdoptedDispensePosition;
    private sequence l_seqDisp;
    private sequence l_seqAsp;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": START"), Translate("*****************************************"));
    if (t_blnSkipPipetting == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("----------------------- SKIP PIPETTING!"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
      return;
    }
    if (i_intAspirationMode > 2)
    {
      VectorCustomDialogs::MessageDialog(Translate("Incorrect Parameter"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Method will abort because of improper aspiration mode"));
    }
    if (i_strTrackingFileStatus != "")
    {
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::TRUE, i_strTrackingFileStatus);
    }
    STAR_TIP_TOOLS::Get1mLChannelCount(ML_STAR, l_intTotalChannels);
    MECC::TraceComment(Translate("Tracing out formatting information for pipette step"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("     Liquid Class:  "), i_strLiquidClass, Translate("\r"), Translate("     Transfer Volume:  "), i_fltTransferVolume, Translate("\r"), Translate(""), Translate(""), Translate(""), Translate(""));
    _MatchAspirationToDispenseSequence(i_seqAspirationPosition, i_seqDispensePosition, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition);
    if (i_blnTransferSampleOrReagent == 1)
    {
      i_blnIsSample = ASWGLOBAL::BOOL::TRUE;
      i_blnIsReagent = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      i_blnIsSample = ASWGLOBAL::BOOL::FALSE;
      i_blnIsReagent = ASWGLOBAL::BOOL::TRUE;
    }
    _DetermineTipTypeFromLiquidClass(i_strLiquidClass, l_intTipType, l_fltMaxVolume);
    if (l_fltMaxVolume == 0.0)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class is using unknown liquid class for this framework!"), Translate("Confirm the liquid class is designed for the correct tip type"));
    }
    if (i_fltTransferVolume > l_fltMaxVolume)
    {
      VectorCustomDialogs::ErrorDialog(Translate("Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Liquid class cannot pipette the required volume!"), Translate("Confirm the liquid class is designed for the transfer volume."));
    }
    if (i_fltAspirationHeight > 0)
    {
      l_blnFixedHeightAspiration = 0;
    }
    else
    {
      l_blnFixedHeightAspiration = 5;
    }
    if (i_fltDispenseHeight > 0)
    {
      l_blnFixedHeightDispense = 0;
    }
    else
    {
      l_blnFixedHeightDispense = 5;
    }
    l_intTotalPositions = SeqGetTotal(l_seqAdoptedDispensePosition);
    {
      l_intAdditionRound = 0;
      while (l_intTotalPositions > 0)
      {
        l_intAdditionRound = l_intAdditionRound + 1;
        l_intTotalPositions = STAR_CHANNEL_TOOLS::CHAN_ACCESS_Sort2Sequences(ML_STAR, l_seqAdoptedAspirationPosition, l_seqAdoptedDispensePosition, 0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_intTotalChannels, l_seqAsp, l_seqDisp, l_strChannelPattern);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Number of Channels: "), l_intTotalChannels);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Channel Pattern: "), l_strChannelPattern);
        MECC::TraceComment(Translate("======================================================================\nPick up tips\n======================================================================"));
        if (i_blnReuseTips == ASWGLOBAL::BOOL::FALSE)
        {
          _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
        }
        else
        {
          if (l_intAdditionRound == 1)
          {
            _PickUpTipsBasedOnTipType(ML_STAR, l_strChannelPattern, l_intTipType);
          }
        }
        MECC::TraceComment(Translate("=================================================================\nTransfer liquid\n================================================================="));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	l_strAspReturn = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
          	l_strLiqReturn = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	l_strDspReturn = arrRetValues[2];
        }
        if (i_blnReuseTips == ASWGLOBAL::BOOL::FALSE)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, l_strAspReturn, Translate(""), l_strLiqReturn, i_strLiquidClass, i_blnIsSample, i_blnIsReagent, i_strTrackingFileStatus);
        DATACONTROLLER::FILE_UpdateTransferReportChannels(ML_STAR, Translate(""), l_strDspReturn, Translate(""), i_strLiquidClass, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, i_strTrackingFileStatus);
      }
    }
    if (i_blnReuseTips == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    DATACONTROLLER::_WaitForReport();
    TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("*****************************************"), _strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }
} // library namespace
