private function M1_DNAShearing(  ) void ;
private function M2_PostShearCleanup(  ) void ;
private function M3_RepairAndATailing(  ) void ;
private function M4_AdapterLigation(  ) void ;
private function M5_PoolingLigation(  ) void ;
private function _DATA_CalculateLoadingDialogs(  ) void ;
private function _DATA_SelectProcesses(  ) void ;
private function _DATA_SequenceDefinitions(  ) void ;
private function _DATA_TraceStartEnd( variable i_strFunctionName, variable i_blnFunctionStart ) void ;
private function _VersionHistory(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_CleanUpTipAdapter(ML_STAR);
  HAMILTONHEATERSHAKERCONTROL::TerminateAllHHSs(ML_STAR);
  CPACCONTROLLER::CPAC_Terminate();
  VectorCustomDialogs::Terminate();
  if(0){
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TIP_DisplayUsage(ML_STAR);
  }
}

private function _VersionHistory(  ) void {
}

private function _DATA_TraceStartEnd( variable i_strFunctionName, variable i_blnFunctionStart ) void {
  private variable l_strTracePad;
  private variable l_strStatusDialogText;
  private variable l_strStartComplete;
  //This is to parse out the useful portion of the getfunctionname command in HSL
  i_strFunctionName = StrRight(i_strFunctionName,StrGetLength(i_strFunctionName) - StrReverseFind(i_strFunctionName,"::") - 2);
  l_strTracePad = Translate("**************************************************************************************");
  if (i_blnFunctionStart == ASWGLOBAL::BOOL::TRUE)
  {
    l_strStatusDialogText = StrConcat12(Translate(">>>>>>>>>>>>"), Translate("SUBMETHOD: "), i_strFunctionName, Translate(" START"), Translate("<<<<<<<<<<<<"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    l_strStartComplete = Translate("START");
  }
  else
  {
    l_strStatusDialogText = StrConcat12(Translate(">>>>>>>>>>>>"), Translate("SUBMETHOD: "), i_strFunctionName, Translate(" COMPLETE"), Translate("<<<<<<<<<<<<"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    l_strStartComplete = Translate("COMPLETE");
  }
  Trace(l_strTracePad);
  Trace("************* SUBMETHOD ",l_strStartComplete,": ",i_strFunctionName,"*************");
  Trace(l_strTracePad);
  VectorCustomDialogs::AppendStatusText(l_strStatusDialogText);
}

private function _DATA_CalculateLoadingDialogs(  ) void {
  private variable l_arrVolumePerTubeAdapterLigationMix[];
  private variable l_arrVolumePerTroughBeads[];
  private variable l_arrVolumePerTroughEthanol[];
  private variable l_arrVolumePerTroughElutionBuffer[];
  private variable l_arrNumberOfUnitsInEachStack[];
  private variable l_intNumberOfTips;
  private variable l_intArraySize;
  private variable l_blnIsCarrierPresent;
  private variable l_intAdjustedNumberOfSamples;
  private variable loopCounter1;
  private variable t_arrVolumePerWellEndRepairDDRATailingMix[];
  private variable l_arrVolumePerTroughEDTA[];
  private variable l_intNumberOf2mLTubesForPooling;
  private variable t_arrVolumePerTubePooling[];
  private variable l_strLabwareDescription;
  private variable l_intNumberOfTubes;
  private variable l_arrLabwarePositions[];
  private variable l_arrLabwareQuantities[];
  private variable i_arrColumnHeaders[];
  private variable l_arrLabwareDescriptions[];
  private variable l_DisplayReagentPlateCalculation;
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  if (t_intNumberOfSamples < 24)
  {
    l_intAdjustedNumberOfSamples = t_intNumberOfSamples;
    if(0){
      l_intAdjustedNumberOfSamples = 24;
    }
  }
  else
  {
    l_intAdjustedNumberOfSamples = t_intNumberOfSamples;
  }
  if (t_intSelectedIndexSTART == 1)
  {
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("300µL"), Translate("Deep well plate with samples"), 1, ML_STAR.MIDI_Pipette);
  }
  if (t_intSelectedIndexSTART == 2)
  {
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Sheared samples"), Translate("Deep well plate"), 1, ML_STAR.MIDI_Pipette);
  }
  if (t_intSelectedIndexSTART == 3)
  {
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("24.5µL"), Translate("96 well PCR plate with samples"), 1, ML_STAR.HSP_Pipette);
  }
  if (t_intSelectedIndexSTART == 4)
  {
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("30µL"), Translate("96 well PCR sample plate with repair master mix"), 1, ML_STAR.HSP_Pipette);
  }
  if (t_intSelectedIndexSTART == 5)
  {
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("60µL"), Translate("96 well PCR sample plate with ligation master mix"), 1, ML_STAR.HSP_Pipette);
  }
  MECC::TraceComment(Translate("*********************************************************************************\nModule 0 - Shearing\n*********************************************************************************"));
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
  }
  MECC::TraceComment(Translate("*********************************************************************************\nModule 1 - Post DNA Shearing Clean-up\n*********************************************************************************"));
  if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltM1InputSampleVolume = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Input Sample"), t_intInputSampleVolume);
    t_fltM1PostShearMagBeads = ARW_LOADINGLIB::Define_VolumePerWell(Translate("SMRTbell® cleanup beads"), t_intInputSampleVolume);
    t_fltM1InitialSupernatantRemovalVolume = t_fltM1InputSampleVolume + t_fltM1PostShearMagBeads;
    t_fltM1PostShearEtOHWash = ARW_LOADINGLIB::Define_VolumePerWell(Translate("80% Ethanol"), 200.0);
    t_fltM1PostShearElutionBuffer = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Elution buffer"), 30.0);
    t_fltM1PostShearElutionBufferTransfer = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Post DNA Shearing Clean-up Output"), 25.5);
    if (t_fltM1InputSampleVolume > 130)
    {
      t_fltM1FirstSupernatantRemoval = t_intInputSampleVolume * 2;
      t_fltM1FirstSupernatantRemoval = t_fltM1FirstSupernatantRemoval - 250;
      t_fltM1FirstSupernatantRemoval = ARW_LOADINGLIB::Define_VolumePerWell(Translate("First Supernatant Removal"), t_fltM1FirstSupernatantRemoval);
    }
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP1000, Translate("1000 uL Filter Tips"), 8, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP1000, Translate("1000 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    if (t_intInputSampleVolume > 150)
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP1000, Translate("1000 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    }
    else
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    }
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP1000, Translate("1000 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
    if (t_blnUseTipAdapter == ASWGLOBAL::BOOL::TRUE)
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
    }
    else
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), 96, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), 96, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), 96, ML_STAR.MlStar50ulTipWithFilter);
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), 96, ML_STAR.MlStar50ulTipWithFilter);
    }
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Empty"), Translate("96 well PCR plate"), 1, ML_STAR.HSP_Pipette);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Empty"), Translate("96 well PCR plate"), 1, ML_STAR.Stack_04);
  }
  MECC::TraceComment(Translate("*********************************************************************************\nModule 2 - End Repair/DDR/A-Tailing\n*********************************************************************************"));
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltM1EndRepairDDRATailingMix = ARW_LOADINGLIB::Define_VolumePerWell(Translate("DNA Repair Master Mix"), 5.5);
    ARW_LOADINGLIB::Define_VolumePerWell_MastermixComponent(Translate("DNA Repair Master Mix"), Translate("Repair Buffer M96"), 4);
    ARW_LOADINGLIB::Define_VolumePerWell_MastermixComponent(Translate("DNA Repair Master Mix"), Translate("DNA Repair M96"), 0.5);
    ARW_LOADINGLIB::Define_VolumePerWell_MastermixComponent(Translate("DNA Repair Master Mix"), Translate("End Repair M96"), 1.0);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
  }
  MECC::TraceComment(Translate("*********************************************************************************\nModule 3 - Adapter Ligation\n*********************************************************************************"));
  if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltM2AdapterLigationMix = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Ligation Master Mix"), 10.5);
    ARW_LOADINGLIB::Define_VolumePerWell_MastermixComponent(Translate("Ligation Master Mix"), Translate("Ligation Mix M96"), 10.0);
    ARW_LOADINGLIB::Define_VolumePerWell_MastermixComponent(Translate("Ligation Master Mix"), Translate("Ligation Enhancer M96"), 0.5);
    t_fltM2Adapters = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Adapters"), 4.0);
    t_fltEDTAStamp = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Stop solution M96"), 20.0);
    t_fltEDTA = ARW_LOADINGLIB::Define_VolumePerWell(Translate("EDTA for Ligation Output Solution"), 15.5);
    if (t_blnUseTipAdapter == ASWGLOBAL::BOOL::TRUE)
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
    }
    else
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), 96, ML_STAR.MlStar50ulTipWithFilter);
    }
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Vortex and quick spin prior to loading with seal removed for selected columns"), Translate("SMRTbell® adapter index plate"), 1, ML_STAR.HSP_Pipette2);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Empty"), Translate("96 well PCR plate"), 1, ML_STAR.Stack_04);
  }
  MECC::TraceComment(Translate("*********************************************************************************\nModule 4 - Pooling\n*********************************************************************************"));
  if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltLigationPoolingVolume = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Pool Volume"), 40.0);
    ARW_LOADINGLIB::Define_VolumePerWell(Translate("2mL tube(s) for Pooling"), 0.0);
    t_arrVolumesToPool.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < t_intNumberOfSamples;)
      {
        loopCounter1 = loopCounter1 + 1;
        t_arrVolumesToPool.AddAsLast(t_fltLigationPoolingVolume);
      }
    }
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
    if (t_intNumberOfSamples <= 24)
    {
      l_intNumberOf2mLTubesForPooling = 1;
    }
    else
    {
      if (t_intNumberOfSamples <= 48)
      {
        l_intNumberOf2mLTubesForPooling = 2;
      }
      else
      {
        if (t_intNumberOfSamples <= 72)
        {
          l_intNumberOf2mLTubesForPooling = 3;
        }
        else
        {
          if (t_intNumberOfSamples <= 96)
          {
            l_intNumberOf2mLTubesForPooling = 4;
          }
        }
      }
    }
    if(0){
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::Tube_2mL, Translate("Pooled Samples Output Tube"), 1, ML_STAR.RGT_2mLTubesForPooling);
    }
  }
  ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Magnetic plate"), Translate("Alpaqua Magnum FLX®"), 1, ML_STAR.MIDI_OnMagnet);
  ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Empty"), Translate("Tip support adapter"), 1, ML_STAR.TipSupport_0001);
  if (t_intNumberOfSamples <= 24)
  {
    ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("2mL tube(s) for Pooling"), l_intAdjustedNumberOfSamples, GlobalARW::LabwareType::Tube_2mL, 2000.0, 0.0, 0.0, 0.0, ML_STAR.RGT_2mLTubesForPooling, 1, t_arrVolumePerTubePooling);
  }
  else
  {
    if (t_intNumberOfSamples <= 48)
    {
      ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("2mL tube(s) for Pooling"), l_intAdjustedNumberOfSamples, GlobalARW::LabwareType::Tube_2mL, 2000.0, 0.0, 0.0, 0.0, ML_STAR.RGT_2mLTubesForPooling, 2, t_arrVolumePerTubePooling);
    }
    else
    {
      if (t_intNumberOfSamples <= 82)
      {
        ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("2mL tube(s) for Pooling"), l_intAdjustedNumberOfSamples, GlobalARW::LabwareType::Tube_2mL, 2000.0, 0.0, 0.0, 0.0, ML_STAR.RGT_2mLTubesForPooling, 3, t_arrVolumePerTubePooling);
      }
      else
      {
        ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("2mL tube(s) for Pooling"), l_intAdjustedNumberOfSamples, GlobalARW::LabwareType::Tube_2mL, 2000.0, 0.0, 0.0, 0.0, ML_STAR.RGT_2mLTubesForPooling, 4, t_arrVolumePerTubePooling);
      }
    }
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("t_arrVolumePerTubePooling"), t_arrVolumePerTubePooling);
  l_intArraySize=t_arrVolumePerTubePooling.GetSize();
  ML_STAR.RGT_2mLTubesForPooling.SetCount(l_intArraySize);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, ML_STAR.RGT_2mLTubesForPooling);
  if (t_intNumberOfSamples <= 24)
  {
    ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("DNA Repair Master Mix"), l_intAdjustedNumberOfSamples, GlobalARW::LabwareType::PCR96_Plate, 200.0, 15.0, 10.0, 0.0, ML_STAR.RGT_ERMix_HSP, 1, t_arrVolumePerWellEndRepairDDRATailingMix);
    ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Ligation Master Mix"), l_intAdjustedNumberOfSamples, GlobalARW::LabwareType::PCR96_Plate, 230.0, 5.0, 10.0, 0.0, ML_STAR.RGT_LigMix, 1, l_arrVolumePerTubeAdapterLigationMix);
  }
  else
  {
    if (t_intNumberOfSamples <= 48)
    {
      ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("DNA Repair Master Mix"), l_intAdjustedNumberOfSamples, GlobalARW::LabwareType::PCR96_Plate, 200.0, 15.0, 10.0, 0.0, ML_STAR.RGT_ERMix_HSP, 2, t_arrVolumePerWellEndRepairDDRATailingMix);
      ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Ligation Master Mix"), l_intAdjustedNumberOfSamples, GlobalARW::LabwareType::PCR96_Plate, 230.0, 5.0, 10.0, 0.0, ML_STAR.RGT_LigMix, 4, l_arrVolumePerTubeAdapterLigationMix);
    }
    else
    {
      if (t_intNumberOfSamples <= 72)
      {
        ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("DNA Repair Master Mix"), l_intAdjustedNumberOfSamples, GlobalARW::LabwareType::PCR96_Plate, 200.0, 15.0, 10.0, 0.0, ML_STAR.RGT_ERMix_HSP, 3, t_arrVolumePerWellEndRepairDDRATailingMix);
        ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Ligation Master Mix"), l_intAdjustedNumberOfSamples, GlobalARW::LabwareType::PCR96_Plate, 230.0, 5.0, 10.0, 0.0, ML_STAR.RGT_LigMix, 6, l_arrVolumePerTubeAdapterLigationMix);
      }
      else
      {
        ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("DNA Repair Master Mix"), l_intAdjustedNumberOfSamples, GlobalARW::LabwareType::PCR96_Plate, 200.0, 15.0, 10.0, 0.0, ML_STAR.RGT_ERMix_HSP, 4, t_arrVolumePerWellEndRepairDDRATailingMix);
        ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Ligation Master Mix"), l_intAdjustedNumberOfSamples, GlobalARW::LabwareType::PCR96_Plate, 230.0, 5.0, 10.0, 0.0, ML_STAR.RGT_LigMix, 8, l_arrVolumePerTubeAdapterLigationMix);
      }
    }
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("t_arrVolumePerWellEndRepairDDRATailingMix"), t_arrVolumePerWellEndRepairDDRATailingMix);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arrVolumePerTubeAdapterLigationMix"), l_arrVolumePerTubeAdapterLigationMix);
  l_intArraySize=t_arrVolumePerWellEndRepairDDRATailingMix.GetSize();
  ML_STAR.RGT_ERMix_HSP.SetCount(l_intArraySize);
  l_intArraySize=l_arrVolumePerTubeAdapterLigationMix.GetSize();
  ML_STAR.RGT_LigMix.SetCount(l_intArraySize);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, ML_STAR.RGT_ERMix_HSP);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, ML_STAR.RGT_LigMix);
  ARW_LOADINGLIB::Add_ReagentInTrough(ML_STAR, Translate("SMRTbell® cleanup beads"), l_intAdjustedNumberOfSamples, Translate("60mL Reservoir"), 50000.0, 3000.0, 0.0, 0.0, ML_STAR.RGT_Beads, l_arrVolumePerTroughBeads);
  ARW_LOADINGLIB::Add_ReagentInTrough(ML_STAR, Translate("Elution buffer"), l_intAdjustedNumberOfSamples, Translate("60mL Reservoir"), 50000.0, 1800.0, 0.0, 0.0, ML_STAR.RGT_ElutionBuffer, l_arrVolumePerTroughElutionBuffer);
  ARW_LOADINGLIB::Add_ReagentInTrough(ML_STAR, Translate("80% Ethanol"), l_intAdjustedNumberOfSamples, Translate("300mL reservoir"), 300000.0, 40000.0, 0.0, 0.0, ML_STAR.RGT_Ethanol, l_arrVolumePerTroughEthanol);
  ARW_LOADINGLIB::Add_ReagentInTrough(ML_STAR, Translate("Stop solution M96"), l_intAdjustedNumberOfSamples, Translate("60mL Reservoir"), 50000.0, 2000.0, 0.0, 0.0, ML_STAR.RGT_EDTA, l_arrVolumePerTroughEDTA);
  ARW_LOADINGLIB::Evaluate_ResourcesByCarrier();
  if(0){
    ARW_LOADINGLIB::Display_Mastermix_Dialog(Translate("ALL"));
  }
  l_DisplayReagentPlateCalculation = ASWGLOBAL::BOOL::FALSE;
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_DisplayReagentPlateCalculation = ASWGLOBAL::BOOL::TRUE;
  }
  if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_DisplayReagentPlateCalculation = ASWGLOBAL::BOOL::TRUE;
  }
  l_arrLabwarePositions.SetSize(0);
  l_arrLabwareQuantities.SetSize(0);
  l_arrLabwareDescriptions.SetSize(0);
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_intNumberOfSamples <= 24)
    {
      l_strLabwareDescription = StrConcat12(Translate("A1"), Translate(" x (96 well PCR plate)"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      l_arrLabwarePositions.AddAsLast(Translate("  Repair master mix  "));
      l_arrLabwareQuantities.AddAsLast(Translate("[160.2µL] total volume per well"));
      l_arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
      l_arrLabwarePositions.AddAsLast(Translate("  --- Repair buffer M96"));
      l_arrLabwareQuantities.AddAsLast(Translate(" -- 116.5µL"));
      l_arrLabwareDescriptions.AddAsLast(Translate(""));
      l_arrLabwarePositions.AddAsLast(Translate("  --- DNA repair mix M96"));
      l_arrLabwareQuantities.AddAsLast(Translate(" -- 14.5µL"));
      l_arrLabwareDescriptions.AddAsLast(Translate(""));
      l_arrLabwarePositions.AddAsLast(Translate("  --- End repair mix M96"));
      l_arrLabwareQuantities.AddAsLast(Translate(" -- 29.1µL"));
      l_arrLabwareDescriptions.AddAsLast(Translate(""));
    }
    else
    {
      if (t_intNumberOfSamples <= 48)
      {
        l_strLabwareDescription = StrConcat12(Translate("A1 B1"), Translate(" x (96 well PCR plate)"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        l_arrLabwarePositions.AddAsLast(Translate("  Repair master mix  "));
        l_arrLabwareQuantities.AddAsLast(Translate("[160.2µL] total volume per well"));
        l_arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
        l_arrLabwarePositions.AddAsLast(Translate("  --- Repair buffer M96"));
        l_arrLabwareQuantities.AddAsLast(Translate(" -- 116.5µL"));
        l_arrLabwareDescriptions.AddAsLast(Translate(""));
        l_arrLabwarePositions.AddAsLast(Translate("  --- DNA repair mix M96"));
        l_arrLabwareQuantities.AddAsLast(Translate(" -- 14.5µL"));
        l_arrLabwareDescriptions.AddAsLast(Translate(""));
        l_arrLabwarePositions.AddAsLast(Translate("  --- End repair mix M96"));
        l_arrLabwareQuantities.AddAsLast(Translate(" -- 29.1µL"));
        l_arrLabwareDescriptions.AddAsLast(Translate(""));
      }
      else
      {
        if (t_intNumberOfSamples <= 72)
        {
          l_strLabwareDescription = StrConcat12(Translate("A1 B1 C1"), Translate(" x (96 well PCR plate)"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          l_arrLabwarePositions.AddAsLast(Translate("  Repair master mix  "));
          l_arrLabwareQuantities.AddAsLast(Translate("[160.2µL] total volume per well"));
          l_arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
          l_arrLabwarePositions.AddAsLast(Translate("  --- Repair buffer M96"));
          l_arrLabwareQuantities.AddAsLast(Translate(" -- 116.5µL"));
          l_arrLabwareDescriptions.AddAsLast(Translate(""));
          l_arrLabwarePositions.AddAsLast(Translate("  --- DNA repair mix M96"));
          l_arrLabwareQuantities.AddAsLast(Translate(" -- 14.5µL"));
          l_arrLabwareDescriptions.AddAsLast(Translate(""));
          l_arrLabwarePositions.AddAsLast(Translate("  --- End repair mix M96"));
          l_arrLabwareQuantities.AddAsLast(Translate(" -- 29.1µL"));
          l_arrLabwareDescriptions.AddAsLast(Translate(""));
        }
        else
        {
          if (t_intNumberOfSamples <= 96)
          {
            l_strLabwareDescription = StrConcat12(Translate("A1 B1 C1 D1"), Translate(" x (96 well PCR plate)"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            l_arrLabwarePositions.AddAsLast(Translate("  Repair master mix  "));
            l_arrLabwareQuantities.AddAsLast(Translate("[160.2µL] total volume per well"));
            l_arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
            l_arrLabwarePositions.AddAsLast(Translate("  --- Repair buffer M96"));
            l_arrLabwareQuantities.AddAsLast(Translate(" -- 116.5µL"));
            l_arrLabwareDescriptions.AddAsLast(Translate(""));
            l_arrLabwarePositions.AddAsLast(Translate("  --- DNA repair mix M96"));
            l_arrLabwareQuantities.AddAsLast(Translate(" -- 14.5µL"));
            l_arrLabwareDescriptions.AddAsLast(Translate(""));
            l_arrLabwarePositions.AddAsLast(Translate("  --- End repair mix M96"));
            l_arrLabwareQuantities.AddAsLast(Translate(" -- 29.1µL"));
            l_arrLabwareDescriptions.AddAsLast(Translate(""));
          }
          else
          {
          }
        }
      }
    }
  }
  if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_intNumberOfSamples <= 24)
    {
      l_strLabwareDescription = StrConcat12(Translate("A2 B2"), Translate(" x (96 well PCR plate)"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      l_arrLabwarePositions.AddAsLast(Translate("  Ligation master mix  "));
      l_arrLabwareQuantities.AddAsLast(Translate("[143.6µL] total volume per well"));
      l_arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
      l_arrLabwarePositions.AddAsLast(Translate("  --- Ligation mix M96"));
      l_arrLabwareQuantities.AddAsLast(Translate(" -- 136.8µL"));
      l_arrLabwareDescriptions.AddAsLast(Translate(""));
      l_arrLabwarePositions.AddAsLast(Translate("  --- Ligation enhancer M96"));
      l_arrLabwareQuantities.AddAsLast(Translate(" -- 6.8µL"));
      l_arrLabwareDescriptions.AddAsLast(Translate(""));
    }
    else
    {
      if (t_intNumberOfSamples <= 48)
      {
        l_strLabwareDescription = StrConcat12(Translate("A2 B2 C2 D2"), Translate(" x (96 well PCR plate)"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        l_arrLabwarePositions.AddAsLast(Translate("  Ligation master mix  "));
        l_arrLabwareQuantities.AddAsLast(Translate("[143.6µL] total volume per well"));
        l_arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
        l_arrLabwarePositions.AddAsLast(Translate("  --- Ligation mix M96"));
        l_arrLabwareQuantities.AddAsLast(Translate(" -- 136.8µL"));
        l_arrLabwareDescriptions.AddAsLast(Translate(""));
        l_arrLabwarePositions.AddAsLast(Translate("  --- Ligation enhancer M96"));
        l_arrLabwareQuantities.AddAsLast(Translate(" -- 6.8µL"));
        l_arrLabwareDescriptions.AddAsLast(Translate(""));
      }
      else
      {
        if (t_intNumberOfSamples <= 72)
        {
          l_strLabwareDescription = StrConcat12(Translate("A2 B2 C2 D2 E2 F2"), Translate(" x (96 well PCR plate)"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          l_arrLabwarePositions.AddAsLast(Translate("  Ligation master mix  "));
          l_arrLabwareQuantities.AddAsLast(Translate("[143.6µL] total volume per well"));
          l_arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
          l_arrLabwarePositions.AddAsLast(Translate("  --- Ligation mix M96"));
          l_arrLabwareQuantities.AddAsLast(Translate(" -- 136.8µL"));
          l_arrLabwareDescriptions.AddAsLast(Translate(""));
          l_arrLabwarePositions.AddAsLast(Translate("  --- Ligation enhancer M96"));
          l_arrLabwareQuantities.AddAsLast(Translate(" -- 6.8µL"));
          l_arrLabwareDescriptions.AddAsLast(Translate(""));
        }
        else
        {
          if (t_intNumberOfSamples <= 96)
          {
            l_strLabwareDescription = StrConcat12(Translate("A2 B2 C2 D2 E2 F2 G2 H2"), Translate(" x (96 well PCR plate)"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            l_arrLabwarePositions.AddAsLast(Translate("  Ligation master mix  "));
            l_arrLabwareQuantities.AddAsLast(Translate("[143.6µL] total volume per well"));
            l_arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
            l_arrLabwarePositions.AddAsLast(Translate("  --- Ligation mix M96"));
            l_arrLabwareQuantities.AddAsLast(Translate(" -- 136.8µL"));
            l_arrLabwareDescriptions.AddAsLast(Translate(""));
            l_arrLabwarePositions.AddAsLast(Translate("  --- Ligation enhancer M96"));
            l_arrLabwareQuantities.AddAsLast(Translate(" -- 6.8µL"));
            l_arrLabwareDescriptions.AddAsLast(Translate(""));
          }
          else
          {
          }
        }
      }
    }
  }
  i_arrColumnHeaders.SetSize(0);
  i_arrColumnHeaders.AddAsLast(Translate("Name"));
  i_arrColumnHeaders.AddAsLast(Translate("Volume (µL) per well"));
  i_arrColumnHeaders.AddAsLast(Translate("Well positions x (Labware)"));
  VectorCustomDialogs::LoadingDialogSetResources(i_arrColumnHeaders);
  if (l_DisplayReagentPlateCalculation == ASWGLOBAL::BOOL::TRUE)
  {
    VectorCustomDialogs::LoadingDialog(Translate("Master mix preparation"), VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Prepare master mix on ice in a 96 well PCR plate according to instructions below. Click 'Ok' to continue."), Translate("Mix reagent buffers with a brief vortex prior to use. Do not vortex enzymes.\nPipette mix until solution appears homogenous.\nQuick-spin all reagents in a microcentrifuge to collect liquid at the bottom prior to placing on the 4°C CPAC."), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\PacBio\Library Prep\Files\Pictures\MasterMix.png"), Translate(""), 300, l_arrLabwarePositions, l_arrLabwareQuantities, l_arrLabwareDescriptions);
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::Carrier1, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnODTCused == 1)
    {
      ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier1, Translate("Carrier1.jpg"), Translate(""));
    }
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::STACK_Carrier, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ARW_LOADINGLIB::Load_StackCarrier(ML_STAR, GlobalARW::CarrierType::STACK_Carrier, Translate("Carrier2.jpg"), Translate(""), l_arrNumberOfUnitsInEachStack);
    l_intArraySize=l_arrNumberOfUnitsInEachStack.GetSize();
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Array of Units in Each Stack: "), l_arrNumberOfUnitsInEachStack);
    if (l_arrNumberOfUnitsInEachStack.ElementAt( 1 -1) > 0)
    {
      STACKREDUCER::StackReducer(l_arrNumberOfUnitsInEachStack.ElementAt( 1 -1), ML_STAR.Stack_01, ML_STAR.Stack_01, 3, ML_STAR);
    }
    if (l_arrNumberOfUnitsInEachStack.ElementAt( 2 -1) > 0)
    {
      STACKREDUCER::StackReducer(l_arrNumberOfUnitsInEachStack.ElementAt( 2 -1), ML_STAR.Stack_02, ML_STAR.Stack_02, 2, ML_STAR);
    }
    if (l_arrNumberOfUnitsInEachStack.ElementAt( 3 -1) > 0)
    {
      STACKREDUCER::StackReducer(l_arrNumberOfUnitsInEachStack.ElementAt( 3 -1), ML_STAR.Stack_03, ML_STAR.Stack_03, 2, ML_STAR);
    }
    if (l_arrNumberOfUnitsInEachStack.ElementAt( 4 -1) > 0)
    {
      STACKREDUCER::StackReducer(l_arrNumberOfUnitsInEachStack.ElementAt( 4 -1), ML_STAR.Stack_04, ML_STAR.Stack_04, 5, ML_STAR);
    }
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
  }
  if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  }
  ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier5, Translate("CarrierTipAdapter.jpg"), Translate("CoreIITipSupportAdapter.PNG"));
  VectorCustomDialogs::MessageDialogWithImage(Translate("All tip positions"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Please insert new tips to the tip carriers and click 'Ok'."), Translate("C:\\Program Files (x86)\\HAMILTON\NGSStar\\PacBio\\Library Prep\\Files\\Pictures\\TipPositions.png"), 0);
  ARW_LOADINGLIB::Load_Tips(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50TipPositions.png"), Translate(""), l_intNumberOfTips);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TIP_EditTipSequences(ML_STAR, ASWGLOBAL::BOOL::TRUE, 0, 0, l_intNumberOfTips);
  ARW_LOADINGLIB::Load_Tips(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300TipPositions.png"), Translate(""), l_intNumberOfTips);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TIP_EditTipSequences(ML_STAR, ASWGLOBAL::BOOL::TRUE, 0, l_intNumberOfTips, 0);
  ARW_LOADINGLIB::Load_Tips(ML_STAR, GlobalARW::LabwareType::TIP1000, Translate("1000TipPositions.png"), Translate(""), l_intNumberOfTips);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TIP_EditTipSequences(ML_STAR, ASWGLOBAL::BOOL::TRUE, l_intNumberOfTips, 0, 0);
  if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
  {
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::Carrier7, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier7, Translate("Carrier7.jpg"), Translate("60mLRgtReservoir.PNG"));
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::Carrier8, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier8, Translate("Carrier8.jpg"), Translate(""));
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::Carrier9, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier9, Translate("Carrier9.jpg"), Translate("TubeCarrierLabeling2.png"));
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::Carrier10, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if(0){
      ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier10, Translate("Carrier10Track33.jpg"), Translate(""));
    }
    l_arrLabwarePositions.SetSize(0);
    l_arrLabwareQuantities.SetSize(0);
    l_arrLabwareDescriptions.SetSize(0);
    if (t_intNumberOfSamples <= 24)
    {
      l_arrLabwarePositions.AddAsLast(Translate("01"));
      l_intNumberOfTubes = 1;
    }
    else
    {
      if (t_intNumberOfSamples <= 48)
      {
        l_arrLabwarePositions.AddAsLast(Translate("01\n02"));
        l_intNumberOfTubes = 2;
      }
      else
      {
        if (t_intNumberOfSamples <= 72)
        {
          l_arrLabwarePositions.AddAsLast(Translate("01\n02\n03"));
          l_intNumberOfTubes = 3;
        }
        else
        {
          if (t_intNumberOfSamples <= 96)
          {
            l_arrLabwarePositions.AddAsLast(Translate("01\n02\n03\n04"));
            l_intNumberOfTubes = 4;
          }
        }
      }
    }
    l_arrLabwareQuantities.AddAsLast(Translate("Pooling tube(s)"));
    l_strLabwareDescription = StrConcat12(Translate("   - "), l_intNumberOfTubes, Translate(" x (2mL Starsedt tube)"), Translate("\n   - [Empty] tube"), Translate("\n   - Carrier track position: 33"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    l_arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
    i_arrColumnHeaders.SetSize(0);
    i_arrColumnHeaders.AddAsLast(Translate("Position"));
    i_arrColumnHeaders.AddAsLast(Translate("Name"));
    i_arrColumnHeaders.AddAsLast(Translate("Description"));
    VectorCustomDialogs::LoadingDialogSetResources(i_arrColumnHeaders);
    VectorCustomDialogs::LoadingDialog(Translate("Pooling tube(s)"), VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Loading tube carrier"), Translate("Remove cap from pooling tube and store for after run."), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\PacBio\Library Prep\Files\Pictures\TubeCarrier2mLWithLabel.png"), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\PacBio\Library Prep\Files\Pictures\2mLStarsedtTube.PNG"), 0, l_arrLabwarePositions, l_arrLabwareQuantities, l_arrLabwareDescriptions);
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::Carrier11, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier11, Translate("Carrier11.jpg"), Translate("TubeCarrierLabeling2.png"));
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::Carrier12, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier12, Translate("Carrier12.jpg"), Translate(""));
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(Translate("MFX_CAR_2HHSF30DWP_DWP_HPTab_OLD_CPAC_0001"), l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    if(0){
      ARW_LOADINGLIB::Load_Carrier(ML_STAR, Translate("MFX_CAR_2HHSF30DWP_DWP_HPTab_OLD_CPAC_0001"), Translate("Carrier13_Updated_CPAC.jpg"), Translate("HSP_MM_Labeled.png"));
    }
    l_arrLabwarePositions.SetSize(0);
    l_arrLabwareQuantities.SetSize(0);
    l_arrLabwareDescriptions.SetSize(0);
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      if (t_intNumberOfSamples <= 24)
      {
        l_arrLabwarePositions.AddAsLast(Translate("A1"));
      }
      else
      {
        if (t_intNumberOfSamples <= 48)
        {
          l_arrLabwarePositions.AddAsLast(Translate("A1\nB1"));
        }
        else
        {
          if (t_intNumberOfSamples <= 72)
          {
            l_arrLabwarePositions.AddAsLast(Translate("A1\nB1\nC1"));
          }
          else
          {
            if (t_intNumberOfSamples <= 96)
            {
              l_arrLabwarePositions.AddAsLast(Translate("A1\nB1\nC1\nD1"));
            }
          }
        }
      }
      l_arrLabwareQuantities.AddAsLast(Translate("Repair master mix"));
      l_strLabwareDescription = StrConcat12(Translate("[160.2µL] total volume per well"), Translate(" --- (96 well PCR plate)"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      l_arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
    }
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      if (t_intNumberOfSamples <= 24)
      {
        l_arrLabwarePositions.AddAsLast(Translate("A2\nB2"));
      }
      else
      {
        if (t_intNumberOfSamples <= 48)
        {
          l_arrLabwarePositions.AddAsLast(Translate("A2\nB2\nC2\nD2"));
        }
        else
        {
          if (t_intNumberOfSamples <= 72)
          {
            l_arrLabwarePositions.AddAsLast(Translate("A2\nB2\nC2\nD2\nE2\nF2"));
          }
          else
          {
            if (t_intNumberOfSamples <= 96)
            {
              l_arrLabwarePositions.AddAsLast(Translate("A2\nB2\nC2\nD2\nE2\nF2\nG2\nH2"));
            }
          }
        }
      }
      l_arrLabwareQuantities.AddAsLast(Translate("Ligation master mix"));
      l_strLabwareDescription = StrConcat12(Translate("[143.6µL] total volume per well"), Translate(" --- (96 well PCR plate)"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      l_arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
    }
    i_arrColumnHeaders.SetSize(0);
    i_arrColumnHeaders.AddAsLast(Translate("Position"));
    i_arrColumnHeaders.AddAsLast(Translate("Name"));
    i_arrColumnHeaders.AddAsLast(Translate("Description"));
    VectorCustomDialogs::LoadingDialogSetResources(i_arrColumnHeaders);
    VectorCustomDialogs::LoadingDialog(Translate("Master mix plate on CPAC 1"), VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Load the master mix 96 well PCR plate"), Translate(""), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\PacBio\Library Prep\Files\Pictures\Carrier13_Updated_CPAC.jpg"), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\PacBio\Library Prep\Files\Pictures\HSP_MM_Labeled.png"), 0, l_arrLabwarePositions, l_arrLabwareQuantities, l_arrLabwareDescriptions);
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::Carrier14, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier14, Translate("Carrier14Pos5.jpg"), Translate("Carrier14-CPAC.jpg"));
  }
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function _DATA_SelectProcesses(  ) void {
  private variable l_arr_strProcessID[];
  private variable l_arr_strDeactivatedStartProcessID[];
  private variable l_arr_strDeactivatedStopProcessID[];
  private variable l_arr_strProcessIDCombinations[];
  private variable l_arrResult[];
  private variable l_arrCustomToolTip[];
  private variable l_arrInputListLabels[];
  private variable l_arrDataTypes[];
  private variable l_arrRanges[];
  private variable l_arrInputListUnits[];
  private variable l_arrInputListValues[];
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  l_arrInputListLabels.SetSize(0);
  l_arrInputListValues.SetSize(0);
  l_arrInputListUnits.SetSize(0);
  l_arrDataTypes.SetSize(0);
  l_arrRanges.SetSize(0);
  l_arrCustomToolTip.SetSize(0);
  l_arrResult.SetSize(2);
  l_arrInputListLabels.AddAsLast(Translate("USER ID"));
  l_arrInputListValues.AddAsLast(Translate(" "));
  l_arrInputListUnits.AddAsLast(Translate(""));
  l_arrDataTypes.AddAsLast(2);
  l_arrRanges.AddAsLast(Translate(""));
  l_arrCustomToolTip.AddAsLast(Translate("Format [First Initial]_[Last Name]"));
  VectorCustomDialogs::InputDialog(Translate("HiFi plex prep"), VectorCustomDialogs::ButtonType::Ok, 0, 0, Translate("Type in USER ID"), Translate(""), l_arrInputListLabels, l_arrInputListValues, l_arrInputListUnits, l_arrDataTypes, l_arrRanges, l_arrCustomToolTip, l_arrResult);
  t_strUserId = l_arrResult.ElementAt( 1 -1);
  t_strUserIdStatus = Translate("USER ID: ") + t_strUserId;
  DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, Translate("-----"));
  DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, t_strUserIdStatus);
  DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, Translate("-----"));
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" -- User ID : "), t_strUserId, Translate(""), Translate(""));
  VectorCustomDialogs::AppendStatusText(t_strUserId);
  t_blnUseMPHForAdapterTransfer = ASWGLOBAL::BOOL::TRUE;
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" -- Use MPH : "), t_blnUseMPHForAdapterTransfer, Translate(""), Translate(""));
  l_arr_strProcessID.SetSize(0);
  l_arr_strProcessID.AddAsLast(Translate("Module 1: DNA shearing"));
  l_arr_strProcessID.AddAsLast(Translate("Module 2: Post-shear cleanup"));
  l_arr_strProcessID.AddAsLast(Translate("Module 3: Repair and A-tailing"));
  l_arr_strProcessID.AddAsLast(Translate("Module 4: Adapter ligation"));
  l_arr_strProcessID.AddAsLast(Translate("Module 5: Pooling"));
  l_arr_strProcessIDCombinations.SetSize(0);
  l_arr_strProcessIDCombinations.AddAsLast(Translate("1.2.3.4.5"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("2.3.4.5"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("3.4.5"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("4.5"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("5"));
  l_arr_strDeactivatedStartProcessID.SetSize(0);
  if (t_blnEnforceStepSelection == ASWGLOBAL::BOOL::TRUE)
  {
  }
  l_arr_strDeactivatedStopProcessID.SetSize(0);
  if (t_blnEnforceStepSelection == ASWGLOBAL::BOOL::TRUE)
  {
    if(0){
      l_arr_strDeactivatedStopProcessID.AddAsLast(4);
      l_arr_strDeactivatedStopProcessID.AddAsLast(5);
      l_arr_strDeactivatedStopProcessID.AddAsLast(7);
    }
  }
  MECC::TraceComment(Translate("PROCESS DEFINITIONS - INPUT"));
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strProcessID:"), l_arr_strProcessID);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strProcessIDCombinations:"), l_arr_strProcessIDCombinations);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strDeactivatedStartProcessID:"), l_arr_strDeactivatedStartProcessID);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strDeactivatedStopProcess:"), l_arr_strDeactivatedStopProcessID);
  ARW_LOADINGLIB::Display_SelectProcesses_Dialog(1, l_arr_strProcessID, l_arr_strProcessIDCombinations, l_arr_strDeactivatedStartProcessID, l_arr_strDeactivatedStopProcessID, t_intSelectedIndexSTART, t_intSelectedIndexSTOP, t_arrBlnProcessActivation);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("t_arrblnProcessActivation:"), t_arrBlnProcessActivation);
  if (t_intSelectedIndexSTART == 2)
  {
    l_arrInputListLabels.SetSize(0);
    l_arrInputListValues.SetSize(0);
    l_arrInputListUnits.SetSize(0);
    l_arrDataTypes.SetSize(0);
    l_arrRanges.SetSize(0);
    l_arrCustomToolTip.SetSize(0);
    l_arrResult.SetSize(0);
    l_arrInputListLabels.AddAsLast(Translate("Sample input volume: "));
    l_arrInputListValues.AddAsLast(Translate(""));
    l_arrInputListUnits.AddAsLast(Translate("Volume range: 90.0 µL - 300.0 µL"));
    l_arrDataTypes.AddAsLast(3);
    l_arrRanges.AddAsLast(Translate("90|300"));
    l_arrCustomToolTip.AddAsLast(Translate("90 - 300"));
    VectorCustomDialogs::InputDialog(t_strKitName, VectorCustomDialogs::ButtonType::Ok, 0, 0, Translate("Enter the post-shear cleanup sample input volume:"), Translate("This volume is the amount going into post-shear cleanup."), l_arrInputListLabels, l_arrInputListValues, l_arrInputListUnits, l_arrDataTypes, l_arrRanges, l_arrCustomToolTip, l_arrResult);
    t_intInputSampleVolume = l_arrResult.ElementAt( 1 -1);
    t_strInputSampleVolume = StrFStrEx(l_arrResult.ElementAt( 1 -1), ASWGLOBAL::BOOL::TRUE, 0);
    t_strSampleInputStatus = StrConcat2(Translate("Sample Input Volume: "), t_strInputSampleVolume);
    DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, Translate("-----"));
    DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, t_strSampleInputStatus);
    DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, Translate("-----"));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" -- Sample Input Volume : "), t_intInputSampleVolume, Translate(""), Translate(""));
  }
  else
  {
    t_strInputSampleVolume = Translate("300");
    t_intInputSampleVolume = 300;
    DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, Translate("-----"));
    DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, t_strSampleInputStatus);
    DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, Translate("-----"));
    t_strSampleInputStatus = StrConcat2(Translate("Sample Input Volume: "), t_strInputSampleVolume);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" -- Sample Input Volume : "), t_intInputSampleVolume, Translate(""), Translate(""));
  }
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function _DATA_SequenceDefinitions(  ) void {
  private dialog customDialog_1;
  private variable l_strWorklistFileDirectory;
  private variable retValueDialog;
  private variable o_intNumberOfSamples;
  private variable l_blnUseSampleCount;
  private variable l_blnUseInputWorklist;
  private variable l_arrWellPosition[];
  private variable l_arrBarcode[];
  private variable l_arrComment[];
  private variable l_arrSampleID[];
  private variable t_intAdapterPositionsToShift;
  private variable t_intAdapterPositionStart;
  private variable t_intAdapterPositionEnd;
  private variable l_arrCustomToolTip[];
  private variable l_arrResult[];
  private variable l_arrInputListLabels[];
  private variable l_arrInputListValues[];
  private variable l_arrDataTypes[];
  private variable l_arrRanges[];
  private variable l_arrInputListUnits[];
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  l_strWorklistFileDirectory = Translate("C:\Program Files (x86)\HAMILTON\NGSStar\PacBio\Library Prep\Files\Example Worklists");
  customDialog_1.InitCustomDialog("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");
  customDialog_1.SetCustomDialogProperty( "path1.Path", l_strWorklistFileDirectory );
  customDialog_1.ShowCustomDialog();
  retValueDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
  l_blnUseInputWorklist = customDialog_1.GetCustomDialogProperty( "radioButton1.IsChecked" );
  l_blnUseSampleCount = customDialog_1.GetCustomDialogProperty( "radioButton2.IsChecked" );
  o_intNumberOfSamples = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
  l_strWorklistFileDirectory = customDialog_1.GetCustomDialogProperty( "path1.Path" );
  if (l_blnUseSampleCount == ASWGLOBAL::BOOL::TRUE)
  {
    t_intNumberOfSamples = o_intNumberOfSamples;
  }
  if (l_blnUseInputWorklist == ASWGLOBAL::BOOL::TRUE)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Worklist pathway: "), l_strWorklistFileDirectory);
    DATACONTROLLER::FILE_StandardWorklist_Extraction(l_strWorklistFileDirectory, Translate(","), l_arrSampleID, l_arrBarcode, l_arrWellPosition, l_arrComment);
    t_intNumberOfSamples=l_arrSampleID.GetSize();
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Number of Samples: "), t_intNumberOfSamples);
  if (t_intNumberOfSamples < 89)
  {
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_arrInputListLabels.SetSize(0);
      l_arrInputListValues.SetSize(0);
      l_arrInputListUnits.SetSize(0);
      l_arrDataTypes.SetSize(0);
      l_arrRanges.SetSize(0);
      l_arrCustomToolTip.SetSize(0);
      l_arrResult.SetSize(0);
      l_arrInputListLabels.AddAsLast(Translate("Column start: "));
      l_arrInputListValues.AddAsLast(Translate("1"));
      l_arrInputListUnits.AddAsLast(Translate("Range: 1 - 12"));
      l_arrDataTypes.AddAsLast(1);
      l_arrRanges.AddAsLast(Translate("1|12"));
      l_arrCustomToolTip.AddAsLast(Translate("1"));
      VectorCustomDialogs::InputDialog(t_strKitName, VectorCustomDialogs::ButtonType::Ok, 0, 0, Translate("Enter start column for adapter index plate transfer:"), Translate("Vortex and quick spin prior to loading with seal removed for selected columns."), l_arrInputListLabels, l_arrInputListValues, l_arrInputListUnits, l_arrDataTypes, l_arrRanges, l_arrCustomToolTip, l_arrResult);
      t_intAdapterColumnStart = l_arrResult.ElementAt( 1 -1);
      t_strAdapterColumnStart = StrIStr(t_intAdapterColumnStart);
      t_strAdapterColStatus = StrConcat2(Translate("Adapter Starting Column Selected by User"), t_strAdapterColumnStart);
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, Translate("-----"));
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, t_strAdapterColStatus);
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, Translate("-----"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" -- Adapter Column Start Selected by User : "), t_intAdapterColumnStart, Translate(""), Translate(""));
    }
  }
  else
  {
    t_intAdapterColumnStart = 1;
    t_strAdapterColumnStart = StrIStr(t_intAdapterColumnStart);
    t_strAdapterColStatus = StrConcat2(Translate("Adapter Starting Column Selected by User"), t_strAdapterColumnStart);
    DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, Translate("-----"));
    DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, t_strAdapterColStatus);
    DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, Translate("-----"));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" -- Adapter Column Start Selected by User : "), t_intAdapterColumnStart, Translate(""), Translate(""));
  }
  ML_STAR.RGT_Beads.SetCount(t_intNumberOfSamples);
  ML_STAR.RGT_ElutionBuffer.SetCount(t_intNumberOfSamples);
  ML_STAR.RGT_EDTA.SetCount(t_intNumberOfSamples);
  ML_STAR.HHS1_HSP.SetCount(t_intNumberOfSamples);
  ML_STAR.HHS2_HSP.SetCount(t_intNumberOfSamples);
  ML_STAR.HHS3_HSP.SetCount(t_intNumberOfSamples);
  ML_STAR.HHS3_MIDI.SetCount(t_intNumberOfSamples);
  ML_STAR.HHS4_MIDI.SetCount(t_intNumberOfSamples);
  ML_STAR.HHS5_MIDI.SetCount(t_intNumberOfSamples);
  ML_STAR.MIDI_OnMagnet.SetCount(t_intNumberOfSamples);
  ML_STAR.HSP_Pipette.SetCount(t_intNumberOfSamples);
  ML_STAR.HSP_Pipette2.SetCount(t_intNumberOfSamples);
  ML_STAR.MIDI_Pipette.SetCount(t_intNumberOfSamples);
  ML_STAR.Pooling_Tube01.SetCount(t_intNumberOfSamples);
  ML_STAR.Pooling_Tube02.SetCount(t_intNumberOfSamples);
  if(0){
    ML_STAR.Pooling_Tube02.SetCurrentPosition(25);
  }
  ML_STAR.Pooling_Tube03.SetCount(t_intNumberOfSamples);
  ML_STAR.Pooling_Tube04.SetCount(t_intNumberOfSamples);
  t_intAdapterColumnStart = t_intAdapterColumnStart - 1;
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Adjusted 0 based starting column: "), t_intAdapterColumnStart);
  t_intAdapterPositionsToShift = t_intAdapterColumnStart * 8;
  t_intAdapterPositionStart = t_intAdapterPositionsToShift + 1;
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Adapter Positions to Shift: "), t_intAdapterPositionsToShift);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Adapter Position Start: "), t_intAdapterPositionStart);
  ML_STAR.HSP_Adapters.SetCurrentPosition(t_intAdapterPositionStart);
  t_intAdapterPositionEnd = t_intAdapterPositionStart + t_intNumberOfSamples;
  ML_STAR.HSP_Adapters.SetCount(t_intAdapterPositionEnd);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Adapter Position End: "), t_intAdapterPositionEnd);
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function M3_RepairAndATailing(  ) void {
  private timer l_hdlM1FirstIncubation;
  private timer l_hdlM1SecondIncubation;
  private variable o_fltTempHHS1;
  private dialog customDialog_2;
  private dialog customDialog_3;
  private dialog customDialog_4;
  private dialog customDialog_5;
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  MECC::TraceComment(Translate("Check CPAC reaches 4C "));
  VectorCustomDialogs::AppendStatusText(Translate("Check CPAC temperature"));
  CPACCONTROLLER::CPAC_CheckTemperature(4, 1);
  MECC::TraceComment(Translate("Transfer DNA Repair Master Mix to sample plate"));
  VectorCustomDialogs::AppendStatusText(Translate("Transfer DNA Repair Master Mix"));
  CPACCONTROLLER::CPAC_CheckTemperature(0, 1);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispense(ML_STAR, 0, ML_STAR.RGT_ERMix_HSP, ML_STAR.HSP_Pipette, t_fltM1EndRepairDDRATailingMix, Translate("PacBio_50F_EndRepairDDRATailingMix_SurfaceEmpty_v2"), 0, 0.2, 0, 0, 0, 0.0, ASWGLOBAL::BOOL::FALSE, Translate("Addition of End-repair/DDR/A-tailing premix"), 0);
  VectorCustomDialogs::AppendStatusText(Translate("Mix Plate"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_MixPlateV4(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_Pipette, Translate("PacBio_50F_EndRepairDDRATailingMix_SurfaceEmpty_v2"), 0, 2.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 30, 24.0, Translate("Mix End Repair Master Mix with sample"), 1, 1);
  HAMILTONHEATERSHAKERCONTROL::WaitForTemperatureControl(1, 37.0, 20);
  HAMILTONHEATERSHAKERCONTROL::WaitForTemperatureControl(2, 65.0, 20);
  VectorCustomDialogs::AppendStatusText(Translate("Seal Plate"));
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  customDialog_2.InitCustomDialog("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");
  customDialog_2.ShowCustomDialog();
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  HAMILTONHEATERSHAKERCONTROL::GetTemperature(ML_STAR, 1, o_fltTempHHS1);
  VectorCustomDialogs::AppendStatusText(Translate("Move plate to 37C HHS"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HHS1_HSP, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("Implement plate tap with teaching needles\n\ncontact the edges of a plate if present"));
  if (t_blnSkipNeedlePlateTap == ASWGLOBAL::BOOL::FALSE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("Check plate moved"));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    t_blnPlateExists = STAR_CHANNEL_TOOLS::MOVE_CheckPlateWithTwoChannels(ML_STAR, 8, ML_STAR.HHS1_HSP, 75.0);
    if (t_blnPlateExists == ASWGLOBAL::BOOL::FALSE)
    {
      customDialog_3.InitCustomDialog("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");
      customDialog_3.ShowCustomDialog();
      t_blnPlateExists = STAR_CHANNEL_TOOLS::MOVE_CheckPlateWithTwoChannels(ML_STAR, 8, ML_STAR.HHS1_HSP, 75.0);
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    else
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
  }
  VectorCustomDialogs::AppendStatusText(Translate("DNA Repair first incubation"));
  DATACONTROLLER::TIME_TimerStart(1800, Translate("DNA Repair First Incubation"), ASWGLOBAL::BOOL::TRUE, l_hdlM1FirstIncubation);
  HAMILTONHEATERSHAKERCONTROL::StopTemperatureControl(ML_STAR, 1);
  VectorCustomDialogs::AppendStatusText(Translate("Move plate to 65C HHS"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HHS1_HSP, ML_STAR.HHS2_HSP, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("Implement plate tap with teaching needles\n\ncontact the edges of a plate if present"));
  if (t_blnSkipNeedlePlateTap == ASWGLOBAL::BOOL::FALSE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("Check plate moved"));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    t_blnPlateExists = STAR_CHANNEL_TOOLS::MOVE_CheckPlateWithTwoChannels(ML_STAR, 8, ML_STAR.HHS2_HSP, 76.0);
    if (t_blnPlateExists == ASWGLOBAL::BOOL::FALSE)
    {
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
      t_blnPlateExists = STAR_CHANNEL_TOOLS::MOVE_CheckPlateWithTwoChannels(ML_STAR, 8, ML_STAR.HHS1_HSP, 76.0);
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    else
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
  }
  VectorCustomDialogs::AppendStatusText(Translate("DNA Repair second incubation"));
  DATACONTROLLER::TIME_TimerStart(300, Translate("DNA Repair Second Incubation"), ASWGLOBAL::BOOL::TRUE, l_hdlM1SecondIncubation);
  HAMILTONHEATERSHAKERCONTROL::StopTemperatureControl(ML_STAR, 2);
  VectorCustomDialogs::AppendStatusText(Translate("Move plate to processing location"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HHS2_HSP, ML_STAR.HSP_Pipette, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  VectorCustomDialogs::AppendStatusText(Translate("Unseal Plate"));
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  customDialog_5.InitCustomDialog("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");
  customDialog_5.ShowCustomDialog();
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function M4_AdapterLigation(  ) void {
  private timer l_hdlAdapterLigationMixIncubation;
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  VectorCustomDialogs::AppendStatusText(Translate("Check CPAC temperature"));
  CPACCONTROLLER::CPAC_CheckTemperature(0, 1);
  MECC::TraceComment(Translate("Transfer barcoded Adapters from plate to sample plate"));
  VectorCustomDialogs::AppendStatusText(Translate("Transfer adapters"));
  if (t_blnUseMPHForAdapterTransfer == ASWGLOBAL::BOOL::TRUE)
  {
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_TransferAdapters(ML_STAR, ML_STAR.HSP_Adapters, ML_STAR.HSP_Pipette, t_fltM2Adapters, Translate("PacBio_50FMPH_IndexAdapters_SurfaceEmpty"), 0.3, 1.0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, 0, 0, 0, 0, Translate("Addition of Adapters"), 0);
  }
  else
  {
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispense(ML_STAR, 2, ML_STAR.HSP_Adapters, ML_STAR.HSP_Pipette, t_fltM2Adapters, Translate("PacBio_50FMPH_IndexAdapters_SurfaceEmpty"), 0.3, 1.0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Addition of Adapters"), 0);
  }
  MECC::TraceComment(Translate("Move Adapter plate from processing location to stack"));
  VectorCustomDialogs::AppendStatusText(Translate("Move Adapter plate to stack"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HSP_Pipette2, ML_STAR.Stack_03_Parking, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  MECC::TraceComment(Translate("Transfer Ligation Master Mix to sample plate"));
  VectorCustomDialogs::AppendStatusText(Translate("Transfer Ligation Master Mix"));
  CPACCONTROLLER::CPAC_CheckTemperature(0, 1);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispense(ML_STAR, 2, ML_STAR.RGT_LigMix, ML_STAR.HSP_Pipette, t_fltM2AdapterLigationMix, Translate("PacBio_50F_AdapterLigationMix_SurfaceEmpty"), 0, 1.0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Addition of Ligation premix"), 0);
  VectorCustomDialogs::AppendStatusText(Translate("Mix plate"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_MixPlateV3(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_Pipette, Translate("PacBio_50F_AdapterLigationMix_SurfaceEmpty"), 0.1, 3, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 20, 34.0, Translate("Mix plate"), 1);
  VectorCustomDialogs::AppendStatusText(Translate("Adapter Ligation Incubation"));
  DATACONTROLLER::TIME_TimerStart(1800, Translate("Adapter Ligation Incubation"), ASWGLOBAL::BOOL::FALSE, l_hdlAdapterLigationMixIncubation);
  MECC::TraceComment(Translate("Move HSP from stack to processing location for stamp"));
  VectorCustomDialogs::AppendStatusText(Translate("Move HSP to processing location"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.Stack_04, ML_STAR.HSP_Pipette2, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  APPSLIB::SequenceIncrement(ML_STAR.Stack_04, 1);
  VectorCustomDialogs::AppendStatusText(Translate("Multi dispense Stop Solution for stamp"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MultiDispense_V2(ML_STAR, ML_STAR.RGT_EDTA, ML_STAR.HSP_Pipette2, Translate("PacBio_STV_LowTEBuffer_MultiDispense_JetPart"), t_fltEDTAStamp, t_fltEDTAStamp, t_fltEDTAStamp, 4.0, Translate("Multi dispense stop solution for stamp"), 0);
  VectorCustomDialogs::AppendStatusText(Translate("Wait for Ligation incubation"));
  DATACONTROLLER::TIME_WaitForTimer(l_hdlAdapterLigationMixIncubation);
  VectorCustomDialogs::AppendStatusText(Translate("Stamp Stop Solution"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_AspirateAllForStamp(ML_STAR, ML_STAR.HSP_Pipette2, ML_STAR.HSP_Pipette, t_fltEDTA, Translate("PacBio_SVF_MPH_LowTEElutionBuffer_SingleDispense_JetEmpty"), 0.4, 2.0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, 0, 0, 10, 48.0, Translate("stamp EDTA"), 0, 0.5);
  VectorCustomDialogs::AppendStatusText(Translate("Mix plate"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_MixPlateV3(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_Pipette, Translate("PacBio_SVF_MPH_LowTEElutionBuffer_SingleDispense_JetEmpty"), 0.2, 2.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 10, 48.0, Translate("Mix EDTA + Ligation Solution"), 1);
  VectorCustomDialogs::AppendStatusText(Translate("Clear tip adapter"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_CleanUpTipAdapter(ML_STAR);
  MECC::TraceComment(Translate("Move stop solution HSP to waste"));
  VectorCustomDialogs::AppendStatusText(Translate("Move Stop Solution Hard Shell Plate to waste"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HSP_Pipette2, ML_STAR.HSP_Waste, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function M2_PostShearCleanup(  ) void {
  private variable l_strStatusDialog;
  private timer l_hdlCleanupBindingIncubation;
  private timer l_hdlMagnetSettleTimer;
  private timer l_hdlElutionIncubation;
  private timer l_EthanolDryTimer;
  private variable l_fltM1MixVolume;
  private variable l_intTotalVolume;
  private dialog customDialog_6;
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  MECC::TraceComment(Translate("Mix Beads"));
  VectorCustomDialogs::AppendStatusText(Translate("Mix SMRTbell beads"));
  if (t_intNumberOfSamples > 48)
  {
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MixLiquid(ML_STAR, 5, ML_STAR.RGT_Beads, 0, 3000, 3, 0, 1000, 3000, 20);
  }
  else
  {
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispense(ML_STAR, 0, ML_STAR.RGT_Beads, ML_STAR.RGT_Beads, 0.0, Translate("PacBio_HighVolume_PurificationBeadsMix_SurfaceEmpty"), 1.0, 2.0, 0, 0, 20, 1000.0, ASWGLOBAL::BOOL::FALSE, Translate("Mix SMRTbell Beads"), 0);
  }
  MECC::TraceComment(Translate("Add beads to Deep Well MIDI plate"));
  VectorCustomDialogs::AppendStatusText(Translate("Transfer beads to Deep Well MIDI Plate"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispense(ML_STAR, 2, ML_STAR.RGT_Beads, ML_STAR.MIDI_Pipette, t_fltM1InputSampleVolume, Translate("PacBio_SVF_ProNexPurificationBeads_SurfaceEmpty_Prewet"), 0, 0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Add beads to Deep Well MIDI plate"), 0);
  VectorCustomDialogs::AppendStatusText(Translate("Mix plate"));
  l_intTotalVolume = t_fltM1InputSampleVolume + t_fltM1InputSampleVolume;
  l_fltM1MixVolume = l_intTotalVolume * 0.8;
  if (l_fltM1MixVolume > 1000)
  {
    l_fltM1MixVolume = 1000;
  }
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_MixPlateV3(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_Pipette, Translate("PacBio_HighVolume_PurificationBeadsMix_SurfaceEmptyV2"), 0, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 20, l_fltM1MixVolume, Translate("Mix beads + sample"), 1);
  MECC::TraceComment(Translate("Bead binding incubation"));
  VectorCustomDialogs::AppendStatusText(Translate("Bead binding incubation"));
  DATACONTROLLER::TIME_TimerStart(600, Translate("Initial bead binding incubation"), ASWGLOBAL::BOOL::FALSE, l_hdlCleanupBindingIncubation);
  VectorCustomDialogs::AppendStatusText(Translate("Multi dispense Elution Buffer for stamp"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MultiDispense_V2(ML_STAR, ML_STAR.RGT_ElutionBuffer, ML_STAR.HSP_Pipette, Translate("PacBio_STV_LowTEBuffer_MultiDispense_JetPart"), t_fltM1PostShearElutionBuffer, t_fltM1PostShearElutionBuffer, t_fltM1PostShearElutionBuffer, 4.0, Translate("Multi dispense Elution Buffer for stamp"), 0);
  VectorCustomDialogs::AppendStatusText(Translate("Wait for bead binding incubation timer"));
  DATACONTROLLER::TIME_WaitForTimer(l_hdlCleanupBindingIncubation);
  MECC::TraceComment(Translate("Move MIDI to magnet"));
  VectorCustomDialogs::AppendStatusText(Translate("Move Deep Well MIDI Plate to magnet"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_OnMagnet, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("Magnet settle timer"));
  VectorCustomDialogs::AppendStatusText(Translate("Magnet settle timer"));
  DATACONTROLLER::TIME_TimerStart(300, Translate("Magnet settle timer"), ASWGLOBAL::BOOL::TRUE, l_hdlMagnetSettleTimer);
  VectorCustomDialogs::AppendStatusText(Translate("Additional mix on mag plate"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_MixPlateV3(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_OnMagnet, Translate("PacBio_HighVolume_PurificationBeadsMix_SurfaceEmptyV2"), 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 6, l_fltM1MixVolume, Translate("Additional Mix on mag"), 1);
  VectorCustomDialogs::AppendStatusText(Translate("Wait for bead binding incubation timer"));
  DATACONTROLLER::TIME_TimerStart(180, Translate("Additional bead binding incubation"), ASWGLOBAL::BOOL::TRUE, l_hdlCleanupBindingIncubation);
  MECC::TraceComment(Translate("Remove supernatant\nM1 needs a larger volume removal (600 max in wells) due to input range of 90 - 300\nHave two supernatant removal steps if doing 600uL. \n\nNeed to change volume depending on if sample input > 150uL. "));
  VectorCustomDialogs::AppendStatusText(Translate("Remove supernatant"));
  if (t_intInputSampleVolume > 130)
  {
    ML_STAR.LiquidWaste_MPH.SetCount(t_intNumberOfSamples);
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_SingleDispense(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste_MPH, t_fltM1FirstSupernatantRemoval, Translate("PacBio_HighVolume_SupernatantRemovalSecond_JetEmpty"), 0, 10, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, 0, 0, 0, 0, Translate("Remove Supernatant"), 1);
    ML_STAR.LiquidWaste_MPH.SetCount(96);
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_RemoveSupernatant(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste_MPH, Translate("PacBio_SVF_SupernatantRemovalFirst_JetEmpty"), Translate("PacBio_SVF_SupernatantRemovalSecond_JetEmpty"), 270.0, 30.0, Translate("Remove supernatant"));
  }
  else
  {
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_RemoveSupernatant(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste_MPH, Translate("PacBio_SVF_SupernatantRemovalFirst_JetEmpty"), Translate("PacBio_SVF_SupernatantRemovalSecond_JetEmpty"), 270.0, 30.0, Translate("Remove supernatant"));
  }
  MECC::TraceComment(Translate("Ethanol wash\n(1x) for better recovery"));
  VectorCustomDialogs::AppendStatusText(Translate("Ethanol wash"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_EthanolWashV2(ML_STAR, ML_STAR.RGT_Ethanol, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste_MPH, 200.0, 242.0, 58.0, Translate("PacBio_SVFMPH_EthanolWash_SurfaceEmpty"), Translate("PacBio_SVF_SupernatantRemovalFirst_JetEmpty"), Translate("PacBio_SVF_SupernatantRemovalSecond_JetEmpty"), Translate("Ethanol Wash"));
  l_strStatusDialog = "Bead drying";
  VectorCustomDialogs::AppendStatusText(l_strStatusDialog);
  DATACONTROLLER::TIME_TimerStart(60, Translate("EtOH Drying"), ASWGLOBAL::BOOL::TRUE, l_EthanolDryTimer);
  MECC::TraceComment(Translate("Move MIDI off magnet"));
  VectorCustomDialogs::AppendStatusText(Translate("Move Deep Well MIDI off magnet"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Pipette, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  MECC::TraceComment(Translate("Transfer Elution Buffer to MIDI plate\n\n26uL"));
  VectorCustomDialogs::AppendStatusText(Translate("Stamp ElutionBuffer to Deep Well MIDI Plate"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_AspirateAllForStamp(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.MIDI_Pipette, 26.0, Translate("PacBio_SVF_LowTEElutionBuffer_SingleDispense_JetEmpty_v2"), 0.2, 2.0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, 0, 0, 0, 0, Translate("stamp"), 0, 0.5);
  MECC::TraceComment(Translate("Move MIDI to HHS to shake"));
  VectorCustomDialogs::AppendStatusText(Translate("Move Deep Well MIDI Plate to HHS to shake"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.HHS3_MIDI, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  HAMILTONHEATERSHAKERCONTROL::ShakeStart(ML_STAR, 3, 1400);
  DATACONTROLLER::TIME_TimerStart(30, Translate("Elution + Beads Mix"), ASWGLOBAL::BOOL::TRUE, l_hdlElutionIncubation);
  HAMILTONHEATERSHAKERCONTROL::StopShaker(ML_STAR, 3);
  MECC::TraceComment(Translate("Elution incubation"));
  VectorCustomDialogs::AppendStatusText(Translate("Elution incubation"));
  DATACONTROLLER::TIME_TimerStart(300, Translate("Post Shear Cleanup Elution incubation"), ASWGLOBAL::BOOL::FALSE, l_hdlElutionIncubation);
  VectorCustomDialogs::AppendStatusText(Translate("Move Elution Buffer Hard Shell Plate to waste"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_Waste, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  VectorCustomDialogs::AppendStatusText(Translate("Move Hard Shell Plate from stack to processing location"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.Stack_04, ML_STAR.HSP_Pipette, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  APPSLIB::SequenceIncrement(ML_STAR.Stack_04, 1);
  VectorCustomDialogs::AppendStatusText(Translate("Wait for elution incubation timer"));
  DATACONTROLLER::TIME_WaitForTimer(l_hdlElutionIncubation);
  MECC::TraceComment(Translate("Move MIDI to magnet"));
  VectorCustomDialogs::AppendStatusText(Translate("Move Deep Well MIDI Plate to magnet"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HHS3_MIDI, ML_STAR.MIDI_OnMagnet, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("Magnet settle timer"));
  VectorCustomDialogs::AppendStatusText(Translate("Magnet settle timer"));
  DATACONTROLLER::TIME_TimerStart(200, Translate("Magnet settle timer"), ASWGLOBAL::BOOL::FALSE, l_hdlMagnetSettleTimer);
  DATACONTROLLER::TIME_WaitForTimer(l_hdlMagnetSettleTimer);
  MECC::TraceComment(Translate("Transfer eluent to HSP"));
  VectorCustomDialogs::AppendStatusText(Translate("Transfer eluent to Hard Shell Plate"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_AspirateAll(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.HSP_Pipette, t_fltM1PostShearElutionBufferTransfer, Translate("PacBio_SVF_MPH_LowTEElutionBuffer_SingleDispense_JetEmpty"), 0.3, 2.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0, 0, 0, 0, Translate("Transfer eluate"), 1, 0.3);
  MECC::TraceComment(Translate("Move MIDI to waste"));
  VectorCustomDialogs::AppendStatusText(Translate("Move Deep Well Plate to waste"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_CleanUpTipAdapter(ML_STAR);
  if (t_intSelectedIndexSTOP == 2)
  {
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
  }
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function M1_DNAShearing(  ) void {
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  MECC::TraceComment(Translate("Shear Plate"));
  VectorCustomDialogs::AppendStatusText(Translate("Shear plate"));
  if (t_blnShearWithChannelsOnly == ASWGLOBAL::BOOL::TRUE)
  {
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_ShearPlate(ML_STAR, 0, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_Pipette, 0, Translate("PacBio_SVF_TransferSample_SurfaceEmpty_Shearing_Ch_500"), 0, 0, 99, 249.0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("channel shearing"), 1);
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_ShearPlate(ML_STAR, 0, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_Pipette, 0, Translate("PacBio_SVF_TransferSample_SurfaceEmpty_Shearing_Ch_500"), 0, 0, 99, 249.0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("channel shearing"), 1);
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_ShearPlate(ML_STAR, 0, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_Pipette, 0, Translate("PacBio_SVF_TransferSample_SurfaceEmpty_Shearing_Ch_500"), 0, 0, 99, 249.0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("channel shearing"), 1);
  }
  else
  {
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_ShearPlate(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_Pipette, 0.0, Translate("PacBio_SVF_TransferSample_SurfaceEmpty_Shearing_Ch_500"), 0, 0.1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 60, 249.0, 0, 0.0, Translate("Shear samples"), 1, 5);
  }
  MECC::TraceComment(Translate("Cleanup Tip Adapter"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_CleanUpTipAdapter(ML_STAR);
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function M5_PoolingLigation(  ) void {
  private dialog customDialog_7;
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  VectorCustomDialogs::AppendStatusText(Translate("Pool sample into 2mL tube(s)"));
  if (t_intNumberOfSamples <= 24)
  {
    VectorCustomDialogs::AppendStatusText(Translate("Pooling sample into 2mL tube 01"));
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispensePooling(ML_STAR, 0, ML_STAR.HSP_Pipette, ML_STAR.Pooling_Tube01, t_fltLigationPoolingVolume, Translate("PacBio_50F_ElutionBuffer_Pool_SurfaceEmpty"), 0.2, 0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Pool Ligation"), 1, t_fltLigationPoolingVolume, t_fltLigationPoolingVolume);
  }
  else
  {
    if (t_intNumberOfSamples <= 48)
    {
      VectorCustomDialogs::AppendStatusText(Translate("Pooling sample into 2mL tube 01"));
      ML_STAR.HSP_Pipette.SetCount(24);
      STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispensePooling(ML_STAR, 0, ML_STAR.HSP_Pipette, ML_STAR.Pooling_Tube01, t_fltLigationPoolingVolume, Translate("PacBio_50F_ElutionBuffer_Pool_SurfaceEmpty"), 0.2, 0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Pool Ligation"), 1, t_fltLigationPoolingVolume, t_fltLigationPoolingVolume);
      VectorCustomDialogs::AppendStatusText(Translate("Pooling sample into 2mL tube 02"));
      ML_STAR.HSP_Pipette.SetCount(t_intNumberOfSamples);
      ML_STAR.HSP_Pipette.SetCurrentPosition(25);
      STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispensePooling(ML_STAR, 0, ML_STAR.HSP_Pipette, ML_STAR.Pooling_Tube02, t_fltLigationPoolingVolume, Translate("PacBio_50F_ElutionBuffer_Pool_SurfaceEmpty"), 0.2, 0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Pool Ligation"), 1, t_fltLigationPoolingVolume, t_fltLigationPoolingVolume);
    }
    else
    {
      if (t_intNumberOfSamples <= 72)
      {
        VectorCustomDialogs::AppendStatusText(Translate("Pooling sample into 2mL tube 01"));
        ML_STAR.HSP_Pipette.SetCount(24);
        STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispensePooling(ML_STAR, 0, ML_STAR.HSP_Pipette, ML_STAR.Pooling_Tube01, t_fltLigationPoolingVolume, Translate("PacBio_50F_ElutionBuffer_Pool_SurfaceEmpty"), 0.2, 0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Pool Ligation"), 1, t_fltLigationPoolingVolume, t_fltLigationPoolingVolume);
        VectorCustomDialogs::AppendStatusText(Translate("Pooling sample into 2mL tube 02"));
        ML_STAR.HSP_Pipette.SetCount(48);
        ML_STAR.HSP_Pipette.SetCurrentPosition(25);
        STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispensePooling(ML_STAR, 0, ML_STAR.HSP_Pipette, ML_STAR.Pooling_Tube02, t_fltLigationPoolingVolume, Translate("PacBio_50F_ElutionBuffer_Pool_SurfaceEmpty"), 0.2, 0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Pool Ligation"), 1, t_fltLigationPoolingVolume, t_fltLigationPoolingVolume);
        VectorCustomDialogs::AppendStatusText(Translate("Pooling sample into 2mL tube 03"));
        ML_STAR.HSP_Pipette.SetCount(t_intNumberOfSamples);
        ML_STAR.HSP_Pipette.SetCurrentPosition(49);
        STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispensePooling(ML_STAR, 0, ML_STAR.HSP_Pipette, ML_STAR.Pooling_Tube03, t_fltLigationPoolingVolume, Translate("PacBio_50F_ElutionBuffer_Pool_SurfaceEmpty"), 0.2, 0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Pool Ligation"), 1, t_fltLigationPoolingVolume, t_fltLigationPoolingVolume);
      }
      else
      {
        if (t_intNumberOfSamples <= 96)
        {
          VectorCustomDialogs::AppendStatusText(Translate("Pooling sample into 2mL tube 01"));
          ML_STAR.HSP_Pipette.SetCount(24);
          STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispensePooling(ML_STAR, 0, ML_STAR.HSP_Pipette, ML_STAR.Pooling_Tube01, t_fltLigationPoolingVolume, Translate("PacBio_50F_ElutionBuffer_Pool_SurfaceEmpty"), 0.2, 0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Pool Ligation"), 1, t_fltLigationPoolingVolume, t_fltLigationPoolingVolume);
          VectorCustomDialogs::AppendStatusText(Translate("Pooling sample into 2mL tube 02"));
          ML_STAR.HSP_Pipette.SetCount(48);
          ML_STAR.HSP_Pipette.SetCurrentPosition(25);
          STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispensePooling(ML_STAR, 0, ML_STAR.HSP_Pipette, ML_STAR.Pooling_Tube02, t_fltLigationPoolingVolume, Translate("PacBio_50F_ElutionBuffer_Pool_SurfaceEmpty"), 0.2, 0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Pool Ligation"), 1, t_fltLigationPoolingVolume, t_fltLigationPoolingVolume);
          VectorCustomDialogs::AppendStatusText(Translate("Pooling sample into 2mL tube 03"));
          ML_STAR.HSP_Pipette.SetCount(72);
          ML_STAR.HSP_Pipette.SetCurrentPosition(49);
          STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispensePooling(ML_STAR, 0, ML_STAR.HSP_Pipette, ML_STAR.Pooling_Tube03, t_fltLigationPoolingVolume, Translate("PacBio_50F_ElutionBuffer_Pool_SurfaceEmpty"), 0.2, 0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Pool Ligation"), 1, t_fltLigationPoolingVolume, t_fltLigationPoolingVolume);
          VectorCustomDialogs::AppendStatusText(Translate("Pooling sample into 2mL tube 04"));
          ML_STAR.HSP_Pipette.SetCount(t_intNumberOfSamples);
          ML_STAR.HSP_Pipette.SetCurrentPosition(73);
          STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispensePooling(ML_STAR, 0, ML_STAR.HSP_Pipette, ML_STAR.Pooling_Tube04, t_fltLigationPoolingVolume, Translate("PacBio_50F_ElutionBuffer_Pool_SurfaceEmpty"), 0.2, 0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Pool Ligation"), 1, t_fltLigationPoolingVolume, t_fltLigationPoolingVolume);
        }
      }
    }
  }
  customDialog_7.InitCustomDialog("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");
  customDialog_7.ShowCustomDialog();
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}
