 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "VectorCustomDialogs\\VectorCustomDialogs.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\PacBio\\Library Prep\\Libraries\\ARW Loading\\ARW_LoadingLib.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\PacBio\\Library Prep\\Libraries\\ODTC_olderVersison\\Advanced\\V0.2\\Sub-method Library\\InhecoODTCController.hs_" }
 namespace _Method { #include "Device Sub-method Libraries\\Inheco\\CPAC\\Slim\\V0.1\\CPACController.hs_" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLAppsLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\PacBio\\Library Prep\\Libraries\\Pipetting Controller\\STAR VOV Generic Framework v0.2.1.hs_" }
 namespace _Method { #include "Device Sub-method Libraries\\Hamilton\\HamiltonHeaterShaker\\Advanced\\1_0\\Sub-method Library\\HamiltonHeaterShakerControl.hs_" }
 namespace _Method { #include "ARW Libraries\\DataController\\DataController.hs_" }
 namespace _Method { #include "Stack_Reducer\\StackReducer.hs_" }
 namespace _Method { #include "VectorCustomDialogs\\VectorCustomDialogs.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Channel Tools.hs_" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\PacBio\\Library Prep\\Libraries\\ARW Loading\\ARW_Global.hsl" }
 namespace _Method { #include "HSLFileDirectoryLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "InhecoMTEC\\HSLMTecLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\PacBio\\Library Prep\\Libraries\\ODTC_olderVersison\\Advanced\\V0.2\\Sub-method Library\\InhecoODTCController.hs_" }
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\PacBio\\Library Prep\\Methods\\PacBio_LibraryPrep_Deck_v5.3.res"
variable t_strKitName;
variable t_blnSkipPipetting;
variable t_blnEnforceStepSelection;
variable t_blnSkipCarrierLoad;
variable t_strTime;
variable t_blnTestTimers;
variable t_strDate;
variable t_strKitVendor;
variable t_blnSkipCarrierUnload;
variable t_strMappingFileName;
variable t_strMappingFileDirectory;
variable t_strSerialNumberMLStar;
variable t_blnSimulationMode;
variable t_arrBlnProcessActivation[];
variable t_arrShutdownList[];
variable t_blnReturn;
variable t_intSelectedIndexSTOP;
variable t_intSelectedIndexSTART;
variable t_intNumberOfSamples;
variable t_blnODTCused;
variable t_fltM1EndRepairDDRATailingMix;
variable t_fltM2AdapterLigationMix;
variable t_strMappingFilePath;
variable t_fltM3ElutionBuffer;
variable t_fltM4NucleaseTreatmentMix;
variable t_fltM5EtOHWash;
variable t_fltM5ElutionBuffer;
variable t_fltM3MagBeads;
variable t_fltM3EtOHWash;
variable t_fltM5SampleTransfer;
variable t_fltM3ElutionBufferTransfer;
variable t_fltM5ElutionBufferTransfer;
variable t_fltM3AdapterLigationOutput;
variable t_blnUseTipAdapter;
variable t_fltM2Adapters;
variable t_blnUseMPHForAdapterTransfer;
variable t_blnActivateSizeSelection;
variable t_arrVolumePerTubeEndRepairDDRATailingMix[];
variable t_arrVolumePerTubeNucleaseTreatmentPreMix[];
variable t_strUserId;
variable t_strAdapterColStatus;
variable t_strUserIdStatus;
variable t_intAdapterColumnStart;
variable t_strInputSampleVolume;
variable t_strAdapterColumnStart;
variable t_fltM1PostShearElutionBuffer;
variable t_fltM1PostShearMagBeads;
variable t_fltM1PostShearEtOHWash;
variable t_fltM1PostShearElutionBufferTransfer;
variable t_fltM1InputSampleVolume;
variable t_fltM6MagBeads;
timer t_hdlM2Incubation;
variable t_fltM6WashBufferTransfer;
variable t_fltM1FirstSupernatantRemoval;
variable retValueReviewSelctions;
variable l_intAdapterColumnStartForDialog;
variable t_strFinalCleanup;
variable l_strSTARTtext;
variable l_strENDtext;
variable t_fltSREInputSample;
variable t_fltSREBuffer;
variable t_fltSREReaction;
variable t_fltSREBufferTransfer;
variable t_fltSREEluate;
variable t_intSREEluateVolume;
variable t_blnActivateSizeSelectionDilutedAMPure;
variable t_blnPlateExists;
variable t_blnSkipNeedlePlateTap;
variable t_fltM7DilutedAmpure;
variable t_blnQCPausesActivated;
variable t_blnShearWithChannelsOnly;
variable t_strInputSelection;
variable t_strInputSelectionDialog;
variable t_fltSREInputSampleVolume;
variable t_fltSREBufferVolume;
variable t_strCentrifugationDialog;
variable t_intCentrifugationTime;
variable t_strCentrifugationTime;
variable t_intSupRemovalHeightMM;
variable t_strShearingLC;
variable t_fltShearingMixVolume;
variable t_fltSMRTbellBeadsVolumePostShear;
dialog customDialog_1;
variable t_intSREMixVolume;
variable t_strInputSelectionReview;
global device ML_STAR ("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\PacBio\\Library Prep\\Methods\\PacBio_LibraryPrep_Deck_v5.3.lay", "ML_STAR", hslTrue);
variable t_varReturnValue;
dialog dialogHandle1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ARW_LOADINGLIB::_InitLibrary();
    INHECOODTCCONTROLLER::_InitLibrary();
    CPACCONTROLLER::_InitLibrary();
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::_InitLibrary();
    HAMILTONHEATERSHAKERCONTROL::_InitLibrary();
    DATACONTROLLER::_InitLibrary();
    STACKREDUCER::_InitLibrary();
    STAR_CHANNEL_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    t_blnQCPausesActivated = ASWGLOBAL::BOOL::FALSE;
    t_blnShearWithChannelsOnly = ASWGLOBAL::BOOL::FALSE;
    t_blnUseTipAdapter = ASWGLOBAL::BOOL::TRUE;
    t_blnSkipCarrierLoad = ASWGLOBAL::BOOL::TRUE;
    t_blnSkipCarrierUnload = ASWGLOBAL::BOOL::TRUE;
    t_blnTestTimers = ASWGLOBAL::BOOL::FALSE;
    t_blnSkipPipetting = ASWGLOBAL::BOOL::FALSE;
    t_blnSkipNeedlePlateTap = ASWGLOBAL::BOOL::FALSE;
    t_blnEnforceStepSelection = ASWGLOBAL::BOOL::FALSE;
    t_blnODTCused = ASWGLOBAL::BOOL::FALSE;
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
    t_strKitVendor = Translate("PacBio");
    t_strKitName = Translate("Library Prep");
    t_strDate = TimGetFormattedDate(Translate(""));
    t_strTime = TimGetFormattedTime(Translate("%H%M%S"));
    t_strMappingFileName = StrConcat8(t_strDate, Translate("_"), t_strTime, Translate("_"), t_strKitName, Translate("MappingFile"), Translate(".xls"), Translate(""));
    t_strMappingFileDirectory = Translate("C:\\Program Files (x86)\\HAMILTON\\LogFiles\\NGSStar\\PacBio\\");
    t_strMappingFilePath = StrConcat4(t_strMappingFileDirectory, t_strMappingFileName, Translate(""), Translate(""));
    t_blnReturn = HSLExtensions::Directory::Exists(t_strMappingFileDirectory);
    if (t_blnReturn == ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      t_blnReturn = HSLExtensions::Directory::Create(t_strMappingFileDirectory);
    }
    if(0){
      VectorCustomDialogs::Initialize();
    }
    t_varReturnValue = VectorCustomDialogs::InitializeWithIconSetDirectoryAndCustomTheme(Translate("C:\Program Files (x86)\HAMILTON\Library\VectorCustomDialogs\ExampleThemes\PacBioTheme"), Translate("C:\Program Files (x86)\HAMILTON\Library\VectorCustomDialogs\ExampleThemes\PacBioTheme\CustomTheme.xml"));
    if (t_varReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      dialogHandle1.SetOutput(Translate("Vector custom dialogs was not initialized. Please resolve issue and restart method."));
      dialogHandle1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      abort;
    }
    VectorCustomDialogs::ShowStatusDialog(t_strKitName);
    if(0){
      t_blnReturn = VectorCustomDialogs::ErrorDialog(t_strKitName, VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Method has completed simulation and water testing only. Proceed at your own risk!"), Translate(""));
    }
    t_blnSimulationMode = Util::GetSimulationMode();
    t_strSerialNumberMLStar = GetSerialNumber(ML_STAR);
    DATACONTROLLER::INIT_InitializeController(t_blnSimulationMode, ASWGLOBAL::BOOL::TRUE, t_blnTestTimers, t_strMappingFilePath);
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::INIT_InitializeController(ML_STAR, TRACE_LEVEL_RELEASE, t_blnSkipPipetting, 54, t_blnSimulationMode, t_strMappingFilePath, t_blnTestTimers);
    ARW_LOADINGLIB::ARW_LoadingLib_START(ML_STAR, Translate("NGSStar"), t_strKitVendor, t_strKitName);
    VectorCustomDialogs::AppendStatusText(Translate("     Initializing Instrument"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    HAMILTONHEATERSHAKERCONTROL::SetSimulation(ML_STAR, t_blnSimulationMode);
    HAMILTONHEATERSHAKERCONTROL::SetErrorHandling(1);
    HAMILTONHEATERSHAKERCONTROL::ConnectAllHHSs(ML_STAR, 0);
    CPACCONTROLLER::CPAC_Init(t_blnSimulationMode);
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      INHECOODTCCONTROLLER::InitializeSingle(1);
      INHECOODTCCONTROLLER::ConnectSingle(1, t_blnSimulationMode, ASWGLOBAL::BOOL::TRUE, Translate("C:\Program Files (x86)\\HAMILTON\\Library\\Device Sub-method Libraries\\Inheco\\ODTC\\Advanced\\V0.2\\Configuration\\Inheco_ODTC_configuration.json"));
    }
    _DATA_SelectProcesses();
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      CPACCONTROLLER::CPAC_SetTemperature(4, 2);
      CPACCONTROLLER::CPAC_SetTemperature(4, 1);
    }
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      CPACCONTROLLER::CPAC_SetTemperature(4, 2);
    }
    if (t_arrBlnProcessActivation.ElementAt( 7 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      CPACCONTROLLER::CPAC_SetTemperature(4, 2);
    }
    if(0){
      if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        HAMILTONHEATERSHAKERCONTROL::StartTemperatureControl(ML_STAR, 2, 50.0, ASWGLOBAL::BOOL::FALSE);
      }
      if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        HAMILTONHEATERSHAKERCONTROL::StartTemperatureControl(ML_STAR, 1, 37.0, ASWGLOBAL::BOOL::FALSE);
        HAMILTONHEATERSHAKERCONTROL::StartTemperatureControl(ML_STAR, 2, 65.0, ASWGLOBAL::BOOL::FALSE);
      }
      if (t_arrBlnProcessActivation.ElementAt( 7 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        HAMILTONHEATERSHAKERCONTROL::StartTemperatureControl(ML_STAR, 1, 37.0, ASWGLOBAL::BOOL::FALSE);
      }
    }
    _DATA_SequenceDefinitions();
    _DATA_CalculateLoadingDialogs();
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_intAdapterColumnStartForDialog = t_intAdapterColumnStart + 1;
    }
    else
    {
      l_intAdapterColumnStartForDialog = Translate("N/A");
    }
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      t_strInputSampleVolume = Translate("N/A");
    }
    if (t_intSelectedIndexSTART == 1)
    {
      l_strSTARTtext = Translate("SRE");
    }
    if (t_intSelectedIndexSTART == 2)
    {
      l_strSTARTtext = Translate("DNA shearing");
    }
    if (t_intSelectedIndexSTART == 3)
    {
      l_strSTARTtext = Translate("Post-shear cleanup");
    }
    if (t_intSelectedIndexSTART == 4)
    {
      l_strSTARTtext = Translate("Repair and A-tailing");
    }
    if (t_intSelectedIndexSTART == 5)
    {
      l_strSTARTtext = Translate("Adapter Ligation");
    }
    if (t_intSelectedIndexSTART == 6)
    {
      l_strSTARTtext = Translate("Post-ligation cleanup");
    }
    if (t_intSelectedIndexSTART == 7)
    {
      l_strSTARTtext = Translate("Nuclease Treatment");
    }
    if (t_intSelectedIndexSTART == 8)
    {
      l_strSTARTtext = Translate("Final cleanup");
    }
    if (t_intSelectedIndexSTOP == 1)
    {
      l_strENDtext = Translate("SRE");
    }
    if (t_intSelectedIndexSTOP == 2)
    {
      l_strENDtext = Translate("DNA shearing");
    }
    if (t_intSelectedIndexSTOP == 3)
    {
      l_strENDtext = Translate("Post-shear cleanup");
    }
    if (t_intSelectedIndexSTOP == 4)
    {
      l_strENDtext = Translate("Repair and A-tailing");
    }
    if (t_intSelectedIndexSTOP == 5)
    {
      l_strENDtext = Translate("Adapter Ligation");
    }
    if (t_intSelectedIndexSTOP == 6)
    {
      l_strENDtext = Translate("Post-ligation cleanup");
    }
    if (t_intSelectedIndexSTOP == 7)
    {
      l_strENDtext = Translate("Nuclease Treatment");
    }
    if (t_intSelectedIndexSTOP == 8)
    {
      l_strENDtext = Translate("Final cleanup");
    }
    if (t_intSelectedIndexSTOP != 8)
    {
      t_strFinalCleanup = Translate("N/A");
    }
    if (t_intSelectedIndexSTART != 1)
    {
      if (t_intSelectedIndexSTART != 2)
      {
        if (t_intSelectedIndexSTART != 3)
        {
          t_strInputSelectionReview = Translate("N/A");
        }
      }
    }
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "textBlock3.Text", t_strFinalCleanup );
    customDialog_1.SetCustomDialogProperty( "textBlock9.Text", t_intNumberOfSamples );
    customDialog_1.SetCustomDialogProperty( "textBlock12.Text", l_strSTARTtext );
    customDialog_1.SetCustomDialogProperty( "textBlock13.Text", l_strENDtext );
    customDialog_1.SetCustomDialogProperty( "textBlock14.Text", l_intAdapterColumnStartForDialog );
    customDialog_1.SetCustomDialogProperty( "textBlock16.Text", t_strInputSelectionReview );
    customDialog_1.SetCustomDialogProperty( "textBlock11.Text", t_strUserId );
    customDialog_1.ShowCustomDialog();
    retValueReviewSelctions = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    Trace("************* Review Selections *************");
    Trace("            User ID: " ,t_strUserId,"" );
    Trace("            Number of Samples: " ,t_intNumberOfSamples,"" );
    Trace("            Process Start: " ,l_strSTARTtext,"" );
    Trace("            Process End: " ,l_strENDtext,"" );
    Trace("            Input: " ,t_strInputSelectionReview,"");
    Trace("            Final Cleanup: " ,t_strFinalCleanup, "");
    Trace("            Adapter column start: " ,l_intAdapterColumnStartForDialog,"");
    Trace("************* Review Selections *************");
    if (retValueReviewSelctions == 2)
    {
      abort;
    }
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      PreModule_SRE();
    }
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M1_Shearing();
    }
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M2_PostShearCleanUp();
    }
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M3_EndRepairAndATailing();
    }
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M4_AdapterLigation();
    }
    if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M5_CleanUp1();
    }
    if (t_arrBlnProcessActivation.ElementAt( 7 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M6_NucleaseTreatment();
    }
    if (t_arrBlnProcessActivation.ElementAt( 8 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M7_CleanUp2();
    }
    if (t_blnSkipCarrierUnload == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    VectorCustomDialogs::AppendStatusText(Translate("     METHOD COMPLETE"));
    HAMILTONHEATERSHAKERCONTROL::TerminateAllHHSs(ML_STAR);
    CPACCONTROLLER::CPAC_Terminate();
    INHECOODTCCONTROLLER::TerminateSingle(1);
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    if(0){
      STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TIP_DisplayUsage(ML_STAR);
    }
    t_arrShutdownList.SetSize(0);
    t_arrShutdownList.AddAsLast(Translate("1.  Check/empty the tip waste"));
    t_arrShutdownList.AddAsLast(Translate("2.  Check/empty the liquid waste container"));
    t_arrShutdownList.AddAsLast(Translate("3.  Remove and store reagents and processing plates"));
    t_blnReturn = VectorCustomDialogs::ListDialog(t_strKitName, VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Method completed. Please perform the following actions:"), Translate("Do you want to defragment the tip racks?"), t_arrShutdownList);
    if (t_blnReturn == ASWGLOBAL::DIALOG::YES)
    {
      STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TIP_TipConsolidation(ML_STAR);
    }
    VectorCustomDialogs::Terminate();
    ARW_LOADINGLIB::_ExitLibrary();
    INHECOODTCCONTROLLER::_ExitLibrary();
    CPACCONTROLLER::_ExitLibrary();
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::_ExitLibrary();
    HAMILTONHEATERSHAKERCONTROL::_ExitLibrary();
    DATACONTROLLER::_ExitLibrary();
    STACKREDUCER::_ExitLibrary();
    STAR_CHANNEL_TOOLS::_ExitLibrary();
  } }
