private function M1_Shearing(  ) void ;
private function M2_PostShearCleanUp(  ) void ;
private function M3_EndRepairAndATailing(  ) void ;
private function M4_AdapterLigation(  ) void ;
private function M5_CleanUp1(  ) void ;
private function M6_NucleaseTreatment(  ) void ;
private function M7_CleanUp2(  ) void ;
private function PreModule_SRE(  ) void ;
private function _DATA_CalculateLoadingDialogs(  ) void ;
private function _DATA_SelectProcesses(  ) void ;
private function _DATA_SequenceDefinitions(  ) void ;
private function _DATA_TraceStartEnd( variable i_strFunctionName, variable i_blnFunctionStart ) void ;
private function _TimeStamp( variable str_DialogStep, variable & str_DialogStepTimeStamp ) void ;
private function _VersionHistory(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  if(0){
    VectorCustomDialogs::MessageDialog(Translate("Method Abort"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("The method has been aborted. See trace log for more information."));
  }
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_CleanUpTipAdapter(ML_STAR);
  HAMILTONHEATERSHAKERCONTROL::TerminateAllHHSs(ML_STAR);
  if(0){
    CPACCONTROLLER::CPAC_Terminate();
  }
  INHECOODTCCONTROLLER::TerminateSingle(1);
  VectorCustomDialogs::Terminate();
  if(0){
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TIP_DisplayUsage(ML_STAR);
  }
}

private function _VersionHistory(  ) void {
}

private function _DATA_TraceStartEnd( variable i_strFunctionName, variable i_blnFunctionStart ) void {
  private variable l_strTracePad;
  private variable l_strStatusDialogText;
  private variable l_strStartComplete;
  //This is to parse out the useful portion of the getfunctionname command in HSL
  i_strFunctionName = StrRight(i_strFunctionName,StrGetLength(i_strFunctionName) - StrReverseFind(i_strFunctionName,"::") - 2);
  l_strTracePad = Translate("**************************************************************************************");
  if (i_blnFunctionStart == ASWGLOBAL::BOOL::TRUE)
  {
    l_strStatusDialogText = StrConcat12(Translate(">>>>>>>>>>>>"), Translate("SUBMETHOD: "), i_strFunctionName, Translate(" START"), Translate("<<<<<<<<<<<<"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    l_strStartComplete = Translate("START");
  }
  else
  {
    l_strStatusDialogText = StrConcat12(Translate(">>>>>>>>>>>>"), Translate("SUBMETHOD: "), i_strFunctionName, Translate(" COMPLETE"), Translate("<<<<<<<<<<<<"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    l_strStartComplete = Translate("COMPLETE");
  }
  Trace(l_strTracePad);
  Trace("************* SUBMETHOD ",l_strStartComplete,": ",i_strFunctionName,"*************");
  Trace(l_strTracePad);
  VectorCustomDialogs::AppendStatusText(l_strStatusDialogText);
}

private function _DATA_CalculateLoadingDialogs(  ) void {
  private variable l_arrVolumePerTubeAdapterLigationMix[];
  private variable l_arrVolumePerTroughBeads[];
  private variable l_arrVolumePerTroughEthanol[];
  private variable l_arrVolumePerTroughElutionBuffer[];
  private variable l_arrNumberOfUnitsInEachStack[];
  private variable l_intNumberOfTips;
  private variable l_intArraySize;
  private variable l_blnIsCarrierPresent;
  private variable l_intAdjustedNumberOfSamples;
  private variable l_arrVolumePerTroughM1ElutionBuffer[];
  private variable t_arrVolumePerTubeSREBuffer[];
  private variable l_intNumberOfTubes;
  private variable l_strLabwareDescription;
  private variable i_arrColumnHeaders[];
  private variable l_arrLabwareQuantities[];
  private variable l_arrLabwarePositions[];
  private variable l_arrLabwareDescriptions[];
  private variable arrLabwareDescriptions[];
  private variable arrLabwarePositions[];
  private variable arrLabwareQuantities[];
  private variable l_intAmpureBeadsForStockTube;
  private variable l_strAmpureQuantity;
  private variable t_strReturn;
  private variable l_intElutionBufferForStockTube;
  private variable l_strEBQuantity;
  private variable l_intTotalAmpureDilNeededForStockTube;
  private variable l_strAmpureBeadsForStockTube;
  private variable l_strElutionBufferForStockTube;
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  if (t_intNumberOfSamples < 24)
  {
    l_intAdjustedNumberOfSamples = t_intNumberOfSamples;
    if(0){
      l_intAdjustedNumberOfSamples = 24;
    }
  }
  else
  {
    l_intAdjustedNumberOfSamples = t_intNumberOfSamples;
  }
  if (t_intSelectedIndexSTART == 1)
  {
    if (t_strInputSelection == "low input")
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("25µL"), Translate("96 well PCR plate with samples"), 1, ML_STAR.HSP_Pipette);
    }
    if (t_strInputSelection == "standard input")
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("50µL"), Translate("96 well PCR plate with samples"), 1, ML_STAR.HSP_Pipette);
    }
  }
  if (t_intSelectedIndexSTART == 2)
  {
    if (t_strInputSelection == "standard input")
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("300µL"), Translate("Deep well plate with samples"), 1, ML_STAR.MIDI_Pipette);
    }
    if (t_strInputSelection == "low input")
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("200µL"), Translate("Deep well plate with samples"), 1, ML_STAR.MIDI_Pipette);
    }
  }
  if (t_intSelectedIndexSTART == 3)
  {
    if (t_strInputSelection == "standard input")
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("300µL"), Translate("Deep well plate with sheared samples"), 1, ML_STAR.MIDI_Pipette);
    }
    if (t_strInputSelection == "low input")
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("200µL"), Translate("Deep well plate with sheared samples"), 1, ML_STAR.MIDI_Pipette);
    }
  }
  if (t_intSelectedIndexSTART == 4)
  {
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("50µL from post-shear cleanup"), Translate("96 well PCR sample plate"), 1, ML_STAR.HSP_Pipette);
  }
  if (t_intSelectedIndexSTART == 5)
  {
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("60µL from repair and A-tailing"), Translate("96 well PCR sample plate"), 1, ML_STAR.HSP_Pipette);
  }
  if (t_intSelectedIndexSTART == 6)
  {
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("85µL from adapter ligation"), Translate("96 well PCR sample plate"), 1, ML_STAR.HSP_Pipette);
  }
  if (t_intSelectedIndexSTART == 7)
  {
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("40µL from post-ligation cleanup"), Translate("96 well PCR sample plate"), 1, ML_STAR.HSP_Pipette);
  }
  if (t_intSelectedIndexSTART == 8)
  {
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("50µL from nuclease treatment"), Translate("96 well PCR sample plate"), 1, ML_STAR.HSP_Pipette);
  }
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltSREBuffer = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Buffer SRE"), 1600.0);
    t_fltSREInputSample = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Sample plate"), t_fltSREInputSampleVolume);
    t_fltSREBuffer = ARW_LOADINGLIB::Define_VolumePerWell(Translate("SRE Buffer"), t_fltSREBufferVolume);
    t_fltSREBufferTransfer = ARW_LOADINGLIB::Define_VolumePerWell(Translate("SRE Buffer Transfer"), t_fltSREInputSample);
    t_fltSREReaction = t_fltSREInputSample + t_fltSREBufferTransfer;
    t_fltSREReaction = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Sample + SRE Buffer"), t_fltSREReaction);
    t_fltSREEluate = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Buffer LTE"), t_intSREEluateVolume);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP1000, Translate("1000 uL Filter Tips"), 8, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    if (t_intSelectedIndexSTART == 1)
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Empty"), Translate("96 well PCR plate"), 1, ML_STAR.HSP_Pipette2);
      ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Empty"), Translate("96 deep well plate"), 1, ML_STAR.MIDI_Pipette);
      ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Empty"), Translate("96 well PCR plate"), 1, ML_STAR.Stack_04);
    }
  }
  if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
  }
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltM1InputSampleVolume = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Input Sample"), t_fltSMRTbellBeadsVolumePostShear);
    t_fltM1PostShearMagBeads = ARW_LOADINGLIB::Define_VolumePerWell(Translate("SMRTbell® cleanup beads"), t_fltSMRTbellBeadsVolumePostShear);
    t_fltM1PostShearEtOHWash = ARW_LOADINGLIB::Define_VolumePerWell(Translate("80% Ethanol"), 200.0);
    t_fltM1PostShearElutionBuffer = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Elution buffer"), 55.0);
    t_fltM1PostShearElutionBufferTransfer = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Post DNA Shearing Clean-up Output"), 50.0);
    t_fltM1FirstSupernatantRemoval = t_fltSMRTbellBeadsVolumePostShear * 2;
    t_fltM1FirstSupernatantRemoval = t_fltM1FirstSupernatantRemoval - 200;
    t_fltM1FirstSupernatantRemoval = ARW_LOADINGLIB::Define_VolumePerWell(Translate("First Supernatant Removal"), t_fltM1FirstSupernatantRemoval);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP1000, Translate("1000 uL Filter Tips"), 8, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP1000, Translate("1000 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP1000, Translate("1000 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP1000, Translate("1000 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    if (t_intSelectedIndexSTART == 3)
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Empty"), Translate("96 well PCR plate"), 1, ML_STAR.HSP_Pipette);
    }
    else
    {
      if (t_intSelectedIndexSTART == 2)
      {
        ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Empty"), Translate("96 well PCR plate"), 1, ML_STAR.HSP_Pipette);
      }
      else
      {
        ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Empty"), Translate("96 well PCR plate"), 1, ML_STAR.Stack_04);
      }
    }
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Empty"), Translate("96 well PCR plate"), 1, ML_STAR.Stack_04);
  }
  if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltM1EndRepairDDRATailingMix = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Repair master mix"), 11.0);
    ARW_LOADINGLIB::Define_VolumePerWell_MastermixComponent(Translate("Repair master mix"), Translate("Repair buffer 96"), 8);
    ARW_LOADINGLIB::Define_VolumePerWell_MastermixComponent(Translate("Repair master mix"), Translate("DNA repair 96"), 1);
    ARW_LOADINGLIB::Define_VolumePerWell_MastermixComponent(Translate("Repair master mix"), Translate("End repair mix 96"), 2);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
  }
  if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltM2AdapterLigationMix = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Ligation master mix"), 21.0);
    ARW_LOADINGLIB::Define_VolumePerWell_MastermixComponent(Translate("Ligation master mix"), Translate("Ligation mix 96"), 20.0);
    ARW_LOADINGLIB::Define_VolumePerWell_MastermixComponent(Translate("Ligation master mix"), Translate("Ligation enhancer 96"), 1.0);
    t_fltM2Adapters = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Adapters"), 4.0);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Vortex and quick spin prior to loading with seal removed for selected columns"), Translate("SMRTbell® adapter index plate"), 1, ML_STAR.Stack_03);
    }
    else
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Vortex and quick spin prior to loading with seal removed for selected columns"), Translate("SMRTbell® adapter index plate"), 1, ML_STAR.HSP_Pipette2);
    }
  }
  if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltM3AdapterLigationOutput = ARW_LOADINGLIB::Define_VolumePerWell(Translate("AdapterLigationOutput"), 85.0);
    t_fltM3MagBeads = ARW_LOADINGLIB::Define_VolumePerWell(Translate("SMRTbell® cleanup beads"), 85.0);
    t_fltM3EtOHWash = ARW_LOADINGLIB::Define_VolumePerWell(Translate("80% Ethanol"), 200.0);
    ARW_LOADINGLIB::Define_VolumePerWell(Translate("80% Ethanol"), 200.0);
    t_fltM3ElutionBuffer = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Elution buffer"), 40.0);
    t_fltM3ElutionBufferTransfer = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Clean-up Output"), 40.0);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP1000, Translate("1000 uL Filter Tips"), 8, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    if (t_blnUseTipAdapter == ASWGLOBAL::BOOL::TRUE)
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    }
    else
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), 96, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    }
    if (t_blnUseTipAdapter == ASWGLOBAL::BOOL::TRUE)
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    }
    else
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), 96, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    }
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    if (t_blnUseTipAdapter == ASWGLOBAL::BOOL::TRUE)
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
    }
    else
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), 96, ML_STAR.MlStar50ulTipWithFilter);
    }
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Empty"), Translate("96 well PCR plate"), 1, ML_STAR.Stack_04);
  }
  if (t_arrBlnProcessActivation.ElementAt( 7 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    if(0){
      t_fltM4NucleaseTreatmentMix = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Nuclease Master Mix"), 10.0);
      ARW_LOADINGLIB::Define_VolumePerWell_MastermixComponent(Translate("Nuclease Master Mix"), Translate("Nuclease Mix"), 5.0);
      ARW_LOADINGLIB::Define_VolumePerWell_MastermixComponent(Translate("Nuclease Master Mix"), Translate("Nuclease Buffer"), 5.0);
    }
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
  }
  if (t_arrBlnProcessActivation.ElementAt( 8 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltM5SampleTransfer = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Nuclease Treatment Output"), 50.0);
    t_fltM6WashBufferTransfer = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Wash Buffer"), 200.0);
    if (t_blnActivateSizeSelectionDilutedAMPure == ASWGLOBAL::BOOL::FALSE)
    {
      t_fltM6MagBeads = ARW_LOADINGLIB::Define_VolumePerWell(Translate("SMRTbell® cleanup beads"), 50.0);
    }
    t_fltM5EtOHWash = ARW_LOADINGLIB::Define_VolumePerWell(Translate("80% Ethanol"), 200.0);
    ARW_LOADINGLIB::Define_VolumePerWell(Translate("80% Ethanol"), 200.0);
    t_fltM5ElutionBuffer = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Elution buffer"), 25.0);
    t_fltM5ElutionBufferTransfer = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Clean-up Output"), 25.0);
    if (t_blnActivateSizeSelectionDilutedAMPure == ASWGLOBAL::BOOL::FALSE)
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP1000, Translate("1000 uL Filter Tips"), 8, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    }
    if (t_blnUseTipAdapter == ASWGLOBAL::BOOL::TRUE)
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    }
    else
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), 96, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    }
    if (t_blnUseTipAdapter == ASWGLOBAL::BOOL::TRUE)
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    }
    else
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), 96, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    }
    if (t_blnUseTipAdapter == ASWGLOBAL::BOOL::TRUE)
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    }
    else
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), 96, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300 uL Filter Tips"), 96, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    }
    ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
    if (t_blnUseTipAdapter == ASWGLOBAL::BOOL::TRUE)
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), t_intNumberOfSamples, ML_STAR.MlStar50ulTipWithFilter);
    }
    else
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50 uL Filter Tips"), 96, ML_STAR.MlStar50ulTipWithFilter);
    }
    if (t_blnActivateSizeSelectionDilutedAMPure == ASWGLOBAL::BOOL::TRUE)
    {
      ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Empty"), Translate("96 well PCR plate"), 1, ML_STAR.Stack_04);
    }
    if (t_intSelectedIndexSTART != 8)
    {
      if (t_blnActivateSizeSelectionDilutedAMPure == ASWGLOBAL::BOOL::FALSE)
      {
        ARW_LOADINGLIB::Add_Labware(ML_STAR, GlobalARW::LabwareType::DWP96_Plate, Translate("Deep well plate"), 1, ML_STAR.Stack_01);
      }
      ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Empty"), Translate("Deep well plate"), 1, ML_STAR.Stack_02);
    }
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Empty"), Translate("96 well PCR plate"), 1, ML_STAR.Stack_04);
    if (t_intSelectedIndexSTART == 8)
    {
      if (t_blnActivateSizeSelectionDilutedAMPure == ASWGLOBAL::BOOL::FALSE)
      {
        ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Empty"), Translate("Deep well plate"), 1, ML_STAR.MIDI_Pipette);
      }
    }
  }
  ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Magnetic plate"), Translate("Alpaqua Magnum FLX®"), 1, ML_STAR.MIDI_OnMagnet);
  ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("Empty"), Translate("Tip support adapter"), 1, ML_STAR.TipSupport_0001);
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_intNumberOfSamples <= 24)
    {
      if(0){
        ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("SRE Buffer"), l_intAdjustedNumberOfSamples, GlobalARW::LabwareType::Tube_2mL, 1600.0, 42.0, 0.0, 110.0, ML_STAR.RGT_SREBuffer_2mLTube, 1, t_arrVolumePerTubeSREBuffer);
      }
      ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Buffer SRE"), 1, GlobalARW::LabwareType::Tube_2mL, 1540.0, 0.0, 0.0, 0.0, ML_STAR.RGT_SREBuffer_2mLTube, 1, t_arrVolumePerTubeSREBuffer);
    }
    else
    {
      if (t_intNumberOfSamples <= 48)
      {
        if(0){
          ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("SRE Buffer"), l_intAdjustedNumberOfSamples, GlobalARW::LabwareType::Tube_2mL, 1600.0, 42.0, 0.0, 110.0, ML_STAR.RGT_SREBuffer_2mLTube, 2, t_arrVolumePerTubeSREBuffer);
        }
        ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Buffer SRE"), 2, GlobalARW::LabwareType::Tube_2mL, 1540.0, 0.0, 0.0, 0.0, ML_STAR.RGT_SREBuffer_2mLTube, 2, t_arrVolumePerTubeSREBuffer);
      }
      else
      {
        if (t_intNumberOfSamples <= 72)
        {
          if(0){
            ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("SRE Buffer"), l_intAdjustedNumberOfSamples, GlobalARW::LabwareType::Tube_2mL, 1600.0, 42.0, 0.0, 110.0, ML_STAR.RGT_SREBuffer_2mLTube, 3, t_arrVolumePerTubeSREBuffer);
          }
          ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Buffer SRE"), 3, GlobalARW::LabwareType::Tube_2mL, 1540.0, 0.0, 0.0, 0.0, ML_STAR.RGT_SREBuffer_2mLTube, 3, t_arrVolumePerTubeSREBuffer);
        }
        else
        {
          if(0){
            ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("SRE Buffer"), l_intAdjustedNumberOfSamples, GlobalARW::LabwareType::Tube_2mL, 2000.0, 42.0, 0.0, 110.0, ML_STAR.RGT_SREBuffer_2mLTube, 4, t_arrVolumePerTubeSREBuffer);
          }
          ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Buffer SRE"), 4, GlobalARW::LabwareType::Tube_2mL, 1540.0, 0.0, 0.0, 0.0, ML_STAR.RGT_SREBuffer_2mLTube, 4, t_arrVolumePerTubeSREBuffer);
        }
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("t_arrVolumePerTubeSREBuffer"), t_arrVolumePerTubeSREBuffer);
    l_intArraySize=t_arrVolumePerTubeSREBuffer.GetSize();
    ML_STAR.RGT_SREBuffer_2mLTube.SetCount(l_intArraySize);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, ML_STAR.RGT_SREBuffer_2mLTube);
  }
  if (t_intNumberOfSamples <= 24)
  {
    ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Repair master mix"), l_intAdjustedNumberOfSamples, Translate("2mL Sarstedt tube"), 2000.0, 42.0, 10.0, 0.0, ML_STAR.RGT_Module1PreMix, 1, t_arrVolumePerTubeEndRepairDDRATailingMix);
    ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Ligation master mix"), l_intAdjustedNumberOfSamples, Translate("2mL Sarstedt tube"), 2000.0, 42.0, 10.0, 0.0, ML_STAR.RGT_Module2PreMix, 1, l_arrVolumePerTubeAdapterLigationMix);
  }
  else
  {
    if (t_intNumberOfSamples <= 48)
    {
      ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Repair master mix"), l_intAdjustedNumberOfSamples, Translate("2mL Sarstedt tube"), 2000.0, 42.0, 10.0, 0.0, ML_STAR.RGT_Module1PreMix, 2, t_arrVolumePerTubeEndRepairDDRATailingMix);
      ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Ligation master mix"), l_intAdjustedNumberOfSamples, Translate("2mL Sarstedt tube"), 2000.0, 42.0, 10.0, 0.0, ML_STAR.RGT_Module2PreMix, 2, l_arrVolumePerTubeAdapterLigationMix);
    }
    else
    {
      if (t_intNumberOfSamples <= 72)
      {
        ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Repair master mix"), l_intAdjustedNumberOfSamples, Translate("2mL Sarstedt tube"), 2000.0, 42.0, 10.0, 0.0, ML_STAR.RGT_Module1PreMix, 3, t_arrVolumePerTubeEndRepairDDRATailingMix);
        ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Ligation master mix"), l_intAdjustedNumberOfSamples, Translate("2mL Sarstedt tube"), 2000.0, 42.0, 10.0, 0.0, ML_STAR.RGT_Module2PreMix, 3, l_arrVolumePerTubeAdapterLigationMix);
      }
      else
      {
        ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Repair master mix"), l_intAdjustedNumberOfSamples, Translate("2mL Sarstedt tube"), 2000.0, 42.0, 10.0, 0.0, ML_STAR.RGT_Module1PreMix, 4, t_arrVolumePerTubeEndRepairDDRATailingMix);
        ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Ligation master mix"), l_intAdjustedNumberOfSamples, Translate("2mL Sarstedt tube"), 2000.0, 42.0, 10.0, 0.0, ML_STAR.RGT_Module2PreMix, 4, l_arrVolumePerTubeAdapterLigationMix);
      }
    }
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("t_arrVolumePerTubeEndRepairDDRATailingMix"), t_arrVolumePerTubeEndRepairDDRATailingMix);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arrVolumePerTubeAdapterLigationMix"), l_arrVolumePerTubeAdapterLigationMix);
  if(0){
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("t_arrVolumePerTubeNucleaseTreatmentPreMix"), t_arrVolumePerTubeNucleaseTreatmentPreMix);
  }
  l_intArraySize=t_arrVolumePerTubeEndRepairDDRATailingMix.GetSize();
  ML_STAR.RGT_Module1PreMix.SetCount(l_intArraySize);
  l_intArraySize=l_arrVolumePerTubeAdapterLigationMix.GetSize();
  ML_STAR.RGT_Module2PreMix.SetCount(l_intArraySize);
  if(0){
    l_intArraySize=t_arrVolumePerTubeNucleaseTreatmentPreMix.GetSize();
    ML_STAR.RGT_Module4PreMix.SetCount(l_intArraySize);
  }
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, ML_STAR.RGT_Module1PreMix);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, ML_STAR.RGT_Module2PreMix);
  if(0){
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, ML_STAR.RGT_Module4PreMix);
  }
  ARW_LOADINGLIB::Add_ReagentInTrough(ML_STAR, Translate("SMRTbell® cleanup beads"), l_intAdjustedNumberOfSamples, Translate("60mL Reservoir"), 50000.0, 2500.0, 0.0, 0.0, ML_STAR.RGT_Beads, l_arrVolumePerTroughBeads);
  ARW_LOADINGLIB::Add_ReagentInTrough(ML_STAR, Translate("Elution buffer"), l_intAdjustedNumberOfSamples, Translate("60mL Reservoir"), 50000.0, 3000.0, 0.0, 0.0, ML_STAR.RGT_ElutionBuffer, l_arrVolumePerTroughElutionBuffer);
  ARW_LOADINGLIB::Add_ReagentInTrough(ML_STAR, Translate("Buffer LTE"), l_intAdjustedNumberOfSamples, Translate("60mL Reservoir"), 50000.0, 4000.0, 0.0, 0.0, ML_STAR.RGT_M1ElutionBuffer, l_arrVolumePerTroughM1ElutionBuffer);
  ARW_LOADINGLIB::Add_ReagentInTrough(ML_STAR, Translate("80% Ethanol"), l_intAdjustedNumberOfSamples, Translate("300mL reservoir"), 300000.0, 40000.0, 0.0, 0.0, ML_STAR.RGT_Ethanol, l_arrVolumePerTroughEthanol);
  ARW_LOADINGLIB::Evaluate_ResourcesByCarrier();
  if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_arrLabwarePositions.SetSize(0);
    l_arrLabwareQuantities.SetSize(0);
    l_arrLabwareDescriptions.SetSize(0);
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfTubes=t_arrVolumePerTubeEndRepairDDRATailingMix.GetSize();
      l_strLabwareDescription = StrConcat12(l_intNumberOfTubes, Translate(" x (2mL Sarstedt tube)"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      l_arrLabwarePositions.AddAsLast(Translate("  Repair master mix  "));
      l_arrLabwareQuantities.AddAsLast(Translate("[332.4µL] total volume per tube"));
      l_arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
      l_arrLabwarePositions.AddAsLast(Translate("  --- Repair buffer 96"));
      l_arrLabwareQuantities.AddAsLast(Translate(" -- 241.7µL"));
      l_arrLabwareDescriptions.AddAsLast(Translate(""));
      l_arrLabwarePositions.AddAsLast(Translate("  --- DNA repair mix 96"));
      l_arrLabwareQuantities.AddAsLast(Translate(" -- 30.2µL"));
      l_arrLabwareDescriptions.AddAsLast(Translate(""));
      l_arrLabwarePositions.AddAsLast(Translate("  --- End repair mix 96"));
      l_arrLabwareQuantities.AddAsLast(Translate(" -- 60.4µL"));
      l_arrLabwareDescriptions.AddAsLast(Translate(""));
    }
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfTubes=l_arrVolumePerTubeAdapterLigationMix.GetSize();
      l_strLabwareDescription = StrConcat12(l_intNumberOfTubes, Translate(" x (2mL Sarstedt tube)"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      l_arrLabwarePositions.AddAsLast(Translate("  Ligation master mix  "));
      l_arrLabwareQuantities.AddAsLast(Translate("[596.4µL] total volume per tube"));
      l_arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
      l_arrLabwarePositions.AddAsLast(Translate("  --- Ligation mix 96"));
      l_arrLabwareQuantities.AddAsLast(Translate(" -- 568.0µL"));
      l_arrLabwareDescriptions.AddAsLast(Translate(""));
      l_arrLabwarePositions.AddAsLast(Translate("  --- Ligation enhancer 96"));
      l_arrLabwareQuantities.AddAsLast(Translate(" -- 28.4µL"));
      l_arrLabwareDescriptions.AddAsLast(Translate(""));
    }
    i_arrColumnHeaders.SetSize(0);
    i_arrColumnHeaders.AddAsLast(Translate("Name"));
    i_arrColumnHeaders.AddAsLast(Translate("Volume (µL) per tube"));
    i_arrColumnHeaders.AddAsLast(Translate("Amount of tubes x Labware"));
    VectorCustomDialogs::LoadingDialogSetResources(i_arrColumnHeaders);
    VectorCustomDialogs::LoadingDialog(Translate("Master mix preparation"), VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Prepare master mix on ice in 2mL Sarstedt tube(s) according to instructions below. Click 'Ok' to continue."), Translate("Mix reagent buffers with a brief vortex prior to use. Do not vortex enzymes.\nPipette mix until solution appears homogenous.\nQuick-spin all reagents in a microcentrifuge to collect liquid at the bottom prior to placing on the 4°C CPAC.\n*Note: Nuclease master mix is made fresh and loaded at nuclease treatment module."), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\PacBio\Library Prep\Files\Pictures\MasterMix.png"), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\PacBio\Library Prep\Files\Pictures\2mLStarsedtTube.PNG"), 300, l_arrLabwarePositions, l_arrLabwareQuantities, l_arrLabwareDescriptions);
  }
  else
  {
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_arrLabwarePositions.SetSize(0);
      l_arrLabwareQuantities.SetSize(0);
      l_arrLabwareDescriptions.SetSize(0);
      if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        l_intNumberOfTubes=t_arrVolumePerTubeEndRepairDDRATailingMix.GetSize();
        l_strLabwareDescription = StrConcat12(l_intNumberOfTubes, Translate(" x (2mL Sarstedt tube)"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        l_arrLabwarePositions.AddAsLast(Translate("  Repair master mix  "));
        l_arrLabwareQuantities.AddAsLast(Translate("[332.4µL] total volume per tube"));
        l_arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
        l_arrLabwarePositions.AddAsLast(Translate("  --- Repair buffer 96"));
        l_arrLabwareQuantities.AddAsLast(Translate(" -- 241.7µL"));
        l_arrLabwareDescriptions.AddAsLast(Translate(""));
        l_arrLabwarePositions.AddAsLast(Translate("  --- DNA repair mix 96"));
        l_arrLabwareQuantities.AddAsLast(Translate(" -- 30.2µL"));
        l_arrLabwareDescriptions.AddAsLast(Translate(""));
        l_arrLabwarePositions.AddAsLast(Translate("  --- End repair mix 96"));
        l_arrLabwareQuantities.AddAsLast(Translate(" -- 60.4µL"));
        l_arrLabwareDescriptions.AddAsLast(Translate(""));
      }
      if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        l_intNumberOfTubes=l_arrVolumePerTubeAdapterLigationMix.GetSize();
        l_strLabwareDescription = StrConcat12(l_intNumberOfTubes, Translate(" x (2mL Sarstedt tube)"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        l_arrLabwarePositions.AddAsLast(Translate("  Ligation master mix  "));
        l_arrLabwareQuantities.AddAsLast(Translate("[596.4µL] total volume per tube"));
        l_arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
        l_arrLabwarePositions.AddAsLast(Translate("  --- Ligation mix 96"));
        l_arrLabwareQuantities.AddAsLast(Translate(" -- 568.0µL"));
        l_arrLabwareDescriptions.AddAsLast(Translate(""));
        l_arrLabwarePositions.AddAsLast(Translate("  --- Ligation enhancer 96"));
        l_arrLabwareQuantities.AddAsLast(Translate(" -- 28.4µL"));
        l_arrLabwareDescriptions.AddAsLast(Translate(""));
      }
      i_arrColumnHeaders.SetSize(0);
      i_arrColumnHeaders.AddAsLast(Translate("Name"));
      i_arrColumnHeaders.AddAsLast(Translate("Volume (µL) per tube"));
      i_arrColumnHeaders.AddAsLast(Translate("Amount of tubes x Labware"));
      VectorCustomDialogs::LoadingDialogSetResources(i_arrColumnHeaders);
      VectorCustomDialogs::LoadingDialog(Translate("Master mix preparation"), VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Prepare master mix on ice in 2mL Sarstedt tube(s) according to instructions below. Click 'Ok' to continue."), Translate("Mix reagent buffers with a brief vortex prior to use. Do not vortex enzymes.\nPipette mix until solution appears homogenous.\nQuick-spin all reagents in a microcentrifuge to collect liquid at the bottom prior to placing on the 4°C CPAC.\n*Note: Nuclease master mix is made fresh and loaded at nuclease treatment module."), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\PacBio\Library Prep\Files\Pictures\MasterMix.png"), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\PacBio\Library Prep\Files\Pictures\2mLStarsedtTube.PNG"), 300, l_arrLabwarePositions, l_arrLabwareQuantities, l_arrLabwareDescriptions);
    }
    else
    {
    }
  }
  if (t_arrBlnProcessActivation.ElementAt( 8 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnActivateSizeSelectionDilutedAMPure == ASWGLOBAL::BOOL::TRUE)
    {
      arrLabwarePositions.SetSize(0);
      arrLabwareQuantities.SetSize(0);
      arrLabwareDescriptions.SetSize(0);
      l_intAmpureBeadsForStockTube = 54.25 * t_intNumberOfSamples;
      l_intElutionBufferForStockTube = 100.75 * t_intNumberOfSamples;
      l_intAmpureBeadsForStockTube = l_intAmpureBeadsForStockTube * 1.1;
      l_intElutionBufferForStockTube = l_intElutionBufferForStockTube * 1.1;
      l_intTotalAmpureDilNeededForStockTube = l_intAmpureBeadsForStockTube + l_intElutionBufferForStockTube;
      l_strAmpureBeadsForStockTube = APPSLIB::StrConvertToString(l_intAmpureBeadsForStockTube);
      l_strAmpureBeadsForStockTube = APPSLIB::StringMid(l_strAmpureBeadsForStockTube, 1, 7);
      l_strElutionBufferForStockTube = APPSLIB::StrConvertToString(l_intElutionBufferForStockTube);
      l_strElutionBufferForStockTube = APPSLIB::StringMid(l_strElutionBufferForStockTube, 1, 7);
      arrLabwarePositions.AddAsLast(Translate("  35% v/v AMPure PB  "));
      l_strAmpureQuantity = StrConcat12(Translate(""), Translate("["), l_intTotalAmpureDilNeededForStockTube, Translate("µL] total volume in tube "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      arrLabwareQuantities.AddAsLast(l_strAmpureQuantity);
      l_strLabwareDescription = StrConcat12(Translate("1"), Translate(" x (Tube) "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
      arrLabwarePositions.AddAsLast(Translate("  --- AMPure® PB"));
      l_strAmpureQuantity = StrConcat12(Translate(" -- "), l_strAmpureBeadsForStockTube, Translate("µL"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      arrLabwareQuantities.AddAsLast(l_strAmpureQuantity);
      arrLabwareDescriptions.AddAsLast(Translate(""));
      arrLabwarePositions.AddAsLast(Translate("  --- Elution buffer"));
      l_strEBQuantity = StrConcat12(Translate(" -- "), l_strElutionBufferForStockTube, Translate("µL"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      arrLabwareQuantities.AddAsLast(l_strEBQuantity);
      arrLabwareDescriptions.AddAsLast(Translate(""));
      i_arrColumnHeaders.SetSize(0);
      i_arrColumnHeaders.AddAsLast(Translate("Name"));
      i_arrColumnHeaders.AddAsLast(Translate("Volume (µL) per tube"));
      i_arrColumnHeaders.AddAsLast(Translate("Amount of tubes x Labware"));
      VectorCustomDialogs::LoadingDialogSetResources(i_arrColumnHeaders);
      t_strReturn = VectorCustomDialogs::LoadingDialog(Translate("35% v/v AMPure dilution calculation for 3.1X cleanup"), VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Prepare 35% v/v AMPure bead dilution according to instructions below. Click 'Ok' to continue."), Translate("Vortex and store bead solution at room temperature until prompted to plate. \nNote: Component volumes are adjusted for the number of samples being prepared, plus 10% overage."), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\PacBio\Library Prep\Files\Pictures\MasterMix.png"), Translate(""), 300, arrLabwarePositions, arrLabwareQuantities, arrLabwareDescriptions);
    }
  }
  if(0){
    ARW_LOADINGLIB::Display_Mastermix_Dialog(Translate("ALL"));
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::Carrier1, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnODTCused == 1)
    {
      ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier1, Translate("Carrier1.jpg"), Translate(""));
    }
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::STACK_Carrier, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ARW_LOADINGLIB::Load_StackCarrier(ML_STAR, GlobalARW::CarrierType::STACK_Carrier, Translate("Carrier2.jpg"), Translate(""), l_arrNumberOfUnitsInEachStack);
    l_intArraySize=l_arrNumberOfUnitsInEachStack.GetSize();
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Array of Units in Each Stack: "), l_arrNumberOfUnitsInEachStack);
    if (l_arrNumberOfUnitsInEachStack.ElementAt( 1 -1) > 0)
    {
      STACKREDUCER::StackReducer(l_arrNumberOfUnitsInEachStack.ElementAt( 1 -1), ML_STAR.Stack_01, ML_STAR.Stack_01, 3, ML_STAR);
    }
    if (l_arrNumberOfUnitsInEachStack.ElementAt( 2 -1) > 0)
    {
      STACKREDUCER::StackReducer(l_arrNumberOfUnitsInEachStack.ElementAt( 2 -1), ML_STAR.Stack_02, ML_STAR.Stack_02, 2, ML_STAR);
    }
    if (l_arrNumberOfUnitsInEachStack.ElementAt( 3 -1) > 0)
    {
      if(0){
        STACKREDUCER::StackReducer(l_arrNumberOfUnitsInEachStack.ElementAt( 3 -1), ML_STAR.Stack_03, ML_STAR.Stack_03, 2, ML_STAR);
      }
    }
    if (l_arrNumberOfUnitsInEachStack.ElementAt( 4 -1) > 0)
    {
      STACKREDUCER::StackReducer(l_arrNumberOfUnitsInEachStack.ElementAt( 4 -1), ML_STAR.Stack_04, ML_STAR.Stack_04, 6, ML_STAR);
    }
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
  }
  if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  }
  ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier5, Translate("CarrierTipAdapter.jpg"), Translate("CoreIITipSupportAdapter.PNG"));
  VectorCustomDialogs::MessageDialogWithImage(Translate("All tip positions"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Load new tips to the tip carriers and click 'Ok'."), Translate("C:\\Program Files (x86)\\HAMILTON\NGSStar\\PacBio\\Library Prep\\Files\\Pictures\\TipPositions.png"), 0);
  ARW_LOADINGLIB::Load_Tips(ML_STAR, GlobalARW::LabwareType::TIP50, Translate("50TipPositions.png"), Translate(""), l_intNumberOfTips);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TIP_EditTipSequences(ML_STAR, ASWGLOBAL::BOOL::TRUE, 0, 0, l_intNumberOfTips);
  ARW_LOADINGLIB::Load_Tips(ML_STAR, GlobalARW::LabwareType::TIP300, Translate("300TipPositions.png"), Translate(""), l_intNumberOfTips);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TIP_EditTipSequences(ML_STAR, ASWGLOBAL::BOOL::TRUE, 0, l_intNumberOfTips, 0);
  ARW_LOADINGLIB::Load_Tips(ML_STAR, GlobalARW::LabwareType::TIP1000, Translate("1000TipPositions.png"), Translate(""), l_intNumberOfTips);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TIP_EditTipSequences(ML_STAR, ASWGLOBAL::BOOL::TRUE, l_intNumberOfTips, 0, 0);
  if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
  {
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::Carrier7, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier7, Translate("Carrier7.jpg"), Translate("60mLRgtReservoir.PNG"));
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::Carrier8, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier8, Translate("Carrier8.jpg"), Translate(""));
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::Carrier9, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier9, Translate("Carrier9.jpg"), Translate("TubeCarrierLabeling2.png"));
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::Carrier10, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if(0){
      ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier10, Translate("Carrier10Track33.jpg"), Translate(""));
    }
    l_arrLabwarePositions.SetSize(0);
    l_arrLabwareQuantities.SetSize(0);
    l_arrLabwareDescriptions.SetSize(0);
    if (t_intNumberOfSamples <= 24)
    {
      l_arrLabwarePositions.AddAsLast(Translate("01"));
      l_intNumberOfTubes = 1;
    }
    else
    {
      if (t_intNumberOfSamples <= 48)
      {
        l_arrLabwarePositions.AddAsLast(Translate("01\n02"));
        l_intNumberOfTubes = 2;
      }
      else
      {
        if (t_intNumberOfSamples <= 72)
        {
          l_arrLabwarePositions.AddAsLast(Translate("01\n02\n03"));
          l_intNumberOfTubes = 3;
        }
        else
        {
          if (t_intNumberOfSamples <= 96)
          {
            l_arrLabwarePositions.AddAsLast(Translate("01\n02\n03\n04"));
            l_intNumberOfTubes = 4;
          }
        }
      }
    }
    l_arrLabwareQuantities.AddAsLast(Translate("Buffer SRE"));
    l_strLabwareDescription = StrConcat12(Translate("   - "), l_intNumberOfTubes, Translate(" x (tube from kit)"), Translate("\n   - [1600.0uL] min. volume per tube"), Translate("\n   - Carrier track position: 33"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    l_arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
    i_arrColumnHeaders.SetSize(0);
    i_arrColumnHeaders.AddAsLast(Translate("Position"));
    i_arrColumnHeaders.AddAsLast(Translate("Name"));
    i_arrColumnHeaders.AddAsLast(Translate("Description"));
    VectorCustomDialogs::LoadingDialogSetResources(i_arrColumnHeaders);
    VectorCustomDialogs::LoadingDialog(Translate("Buffer SRE"), VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Loading tube carrier"), Translate("Mix reagent buffers with a brief vortex prior to use. \nQuick-spin all reagents in a microcentrifuge to collect liquid at bottom prior to loading."), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\PacBio\Library Prep\Files\Pictures\TubeCarrier2mLWithLabel.png"), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\PacBio\Library Prep\Files\Pictures\BufferSRETube.PNG"), 0, l_arrLabwarePositions, l_arrLabwareQuantities, l_arrLabwareDescriptions);
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::Carrier11, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier11, Translate("Carrier11.jpg"), Translate("TubeCarrierLabeling2.png"));
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::Carrier12, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier12, Translate("Carrier12.jpg"), Translate(""));
    if (t_blnSkipCarrierLoad == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::Carrier13, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier13, Translate("Carrier13.jpg"), Translate(""));
  }
  ARW_LOADINGLIB::RetrieveCarrierPresence(GlobalARW::CarrierType::Carrier14, l_blnIsCarrierPresent);
  if (l_blnIsCarrierPresent == ASWGLOBAL::BOOL::TRUE)
  {
    ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier14, Translate("Carrier14Pos5.jpg"), Translate("Carrier14-CPAC.jpg"));
  }
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function _DATA_SelectProcesses(  ) void {
  private variable l_arr_strProcessID[];
  private variable l_arr_strDeactivatedStartProcessID[];
  private variable l_arr_strDeactivatedStopProcessID[];
  private variable l_arr_strProcessIDCombinations[];
  private variable l_arrIsEditable[];
  private variable l_arrLabels[];
  private variable l_arrIsSelected[];
  private variable l_arrToolTips[];
  private variable l_arrGroupName[];
  private variable l_arrResult[];
  private variable l_arrCustomToolTip[];
  private variable l_arrInputListLabels[];
  private variable l_arrDataTypes[];
  private variable l_arrRanges[];
  private variable l_arrInputListUnits[];
  private variable l_arrInputListValues[];
  private variable t_blnFinalCleanupIsFound;
  private variable t_blnAdapterAdditionIsFound;
  private variable l_strBothTrue;
  private variable l_strUserIdDialog;
  private variable l_blnActivateUserSelectionLowInput;
  private variable i_arrInputListHeaderLocalization[];
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  l_arrInputListLabels.SetSize(0);
  l_arrInputListValues.SetSize(0);
  l_arrInputListUnits.SetSize(0);
  l_arrDataTypes.SetSize(0);
  l_arrRanges.SetSize(0);
  l_arrCustomToolTip.SetSize(0);
  l_arrResult.SetSize(2);
  l_arrInputListLabels.AddAsLast(Translate("USER ID:"));
  l_arrInputListValues.AddAsLast(Translate(" "));
  l_arrInputListUnits.AddAsLast(Translate(""));
  l_arrDataTypes.AddAsLast(2);
  l_arrRanges.AddAsLast(Translate(""));
  l_arrCustomToolTip.AddAsLast(Translate("Format [First Initial]_[Last Name]"));
  i_arrInputListHeaderLocalization.SetSize(0);
  i_arrInputListHeaderLocalization.AddAsLast(Translate(""));
  i_arrInputListHeaderLocalization.AddAsLast(Translate(""));
  i_arrInputListHeaderLocalization.AddAsLast(Translate(""));
  VectorCustomDialogs::InputDialogSetResources(i_arrInputListHeaderLocalization);
  VectorCustomDialogs::InputDialog(Translate("HiFi prep"), VectorCustomDialogs::ButtonType::Ok, 0, 0, Translate("Type in USER ID"), Translate(""), l_arrInputListLabels, l_arrInputListValues, l_arrInputListUnits, l_arrDataTypes, l_arrRanges, l_arrCustomToolTip, l_arrResult);
  t_strUserId = l_arrResult.ElementAt( 1 -1);
  t_strUserIdStatus = Translate("USER ID: ") + t_strUserId;
  DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, Translate("-----"));
  DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, t_strUserIdStatus);
  DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, Translate("-----"));
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" -- User ID : "), t_strUserId, Translate(""), Translate(""));
  l_strUserIdDialog = StrConcat2(Translate("USER ID: "), t_strUserId);
  VectorCustomDialogs::AppendStatusText(l_strUserIdDialog);
  l_arr_strProcessID.SetSize(0);
  l_arr_strProcessID.AddAsLast(Translate("Pre-Module: Short Read Eliminator (SRE)"));
  l_arr_strProcessID.AddAsLast(Translate("Module 1: DNA shearing"));
  l_arr_strProcessID.AddAsLast(Translate("Module 2: Post-shear cleanup"));
  l_arr_strProcessID.AddAsLast(Translate("Module 3: Repair and A-tailing"));
  l_arr_strProcessID.AddAsLast(Translate("Module 4: Adapter ligation"));
  l_arr_strProcessID.AddAsLast(Translate("Module 5: Post-ligation cleanup"));
  l_arr_strProcessID.AddAsLast(Translate("Module 6: Nuclease treatment"));
  l_arr_strProcessID.AddAsLast(Translate("Module 7: Final cleanup"));
  l_arr_strProcessIDCombinations.SetSize(0);
  l_arr_strProcessIDCombinations.AddAsLast(Translate("1.2.3.4.5.6.7.8"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("2.3.4.5.6.7.8"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("3.4.5.6.7.8"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("4.5.6.7.8"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("5.6.7.8"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("6.7.8"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("7.8"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("8"));
  l_arr_strDeactivatedStartProcessID.SetSize(0);
  if (t_blnEnforceStepSelection == ASWGLOBAL::BOOL::TRUE)
  {
  }
  l_arr_strDeactivatedStopProcessID.SetSize(0);
  if (t_blnEnforceStepSelection == ASWGLOBAL::BOOL::TRUE)
  {
    l_arr_strDeactivatedStopProcessID.AddAsLast(4);
    l_arr_strDeactivatedStopProcessID.AddAsLast(5);
    l_arr_strDeactivatedStopProcessID.AddAsLast(7);
  }
  MECC::TraceComment(Translate("PROCESS DEFINITIONS - INPUT"));
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strProcessID:"), l_arr_strProcessID);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strProcessIDCombinations:"), l_arr_strProcessIDCombinations);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strDeactivatedStartProcessID:"), l_arr_strDeactivatedStartProcessID);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strDeactivatedStopProcess:"), l_arr_strDeactivatedStopProcessID);
  ARW_LOADINGLIB::Display_SelectProcesses_Dialog(1, l_arr_strProcessID, l_arr_strProcessIDCombinations, l_arr_strDeactivatedStartProcessID, l_arr_strDeactivatedStopProcessID, t_intSelectedIndexSTART, t_intSelectedIndexSTOP, t_arrBlnProcessActivation);
  t_blnFinalCleanupIsFound = APPSLIB::ArrayLookup(t_arrBlnProcessActivation, ASWGLOBAL::BOOL::TRUE, 8);
  t_blnAdapterAdditionIsFound = APPSLIB::ArrayLookup(t_arrBlnProcessActivation, ASWGLOBAL::BOOL::TRUE, 5);
  t_strInputSelection = Translate("N/A");
  l_blnActivateUserSelectionLowInput = ASWGLOBAL::BOOL::FALSE;
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_blnActivateUserSelectionLowInput = ASWGLOBAL::BOOL::TRUE;
  }
  if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_blnActivateUserSelectionLowInput = ASWGLOBAL::BOOL::TRUE;
  }
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_blnActivateUserSelectionLowInput = ASWGLOBAL::BOOL::TRUE;
  }
  if (l_blnActivateUserSelectionLowInput == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_intSelectedIndexSTART == 1)
    {
      l_arrLabels.SetSize(0);
      l_arrToolTips.SetSize(0);
      l_arrIsEditable.SetSize(0);
      l_arrIsSelected.SetSize(0);
      l_arrGroupName.SetSize(0);
      l_arrLabels.AddAsLast(Translate("Low mass: 500 ng - 1250 ng in 25µL (20 ng/µL - 50 ng/µL)"));
      l_arrLabels.AddAsLast(Translate("High mass: 2000 ng - 4000 ng in 50 µL (40 ng/µL - 80 ng/µL)"));
      l_arrToolTips.AddAsLast(Translate(" (20 ng/µL - 50 ng/µL)"));
      l_arrToolTips.AddAsLast(Translate("(40 ng/µL - 80 ng/µL)"));
      l_arrIsEditable.AddAsLast(1);
      l_arrIsEditable.AddAsLast(1);
      l_arrIsSelected.AddAsLast(0);
      l_arrIsSelected.AddAsLast(0);
      l_arrGroupName.AddAsLast(Translate("SRE input"));
      l_arrGroupName.AddAsLast(Translate("SRE input"));
    }
    else
    {
      if (t_intSelectedIndexSTART == 2)
      {
        l_arrLabels.SetSize(0);
        l_arrToolTips.SetSize(0);
        l_arrIsEditable.SetSize(0);
        l_arrIsSelected.SetSize(0);
        l_arrGroupName.SetSize(0);
        l_arrLabels.AddAsLast(Translate("Low mass: <= 1000 ng in 200 µL (<= 5 ng/µL)"));
        l_arrLabels.AddAsLast(Translate("High mass: 1000 ng - 3000 ng in 300 µL (3.3 ng/µL - 10 ng/µL)"));
        l_arrToolTips.AddAsLast(Translate("(<= 5ng/µL)"));
        l_arrToolTips.AddAsLast(Translate("(3.3 ng/µL - 10 ng/µL)"));
        l_arrIsEditable.AddAsLast(1);
        l_arrIsEditable.AddAsLast(1);
        l_arrIsSelected.AddAsLast(0);
        l_arrIsSelected.AddAsLast(0);
        l_arrGroupName.AddAsLast(Translate("DNA shearing input"));
        l_arrGroupName.AddAsLast(Translate("DNA shearing input"));
      }
      else
      {
        if (t_intSelectedIndexSTART == 3)
        {
          l_arrLabels.SetSize(0);
          l_arrToolTips.SetSize(0);
          l_arrIsEditable.SetSize(0);
          l_arrIsSelected.SetSize(0);
          l_arrGroupName.SetSize(0);
          l_arrLabels.AddAsLast(Translate("Low mass: 200 µL sample volume"));
          l_arrLabels.AddAsLast(Translate("High mass: 300 µL sample volume"));
          l_arrToolTips.AddAsLast(Translate("200 µL"));
          l_arrToolTips.AddAsLast(Translate("300 µL"));
          l_arrIsEditable.AddAsLast(1);
          l_arrIsEditable.AddAsLast(1);
          l_arrIsSelected.AddAsLast(0);
          l_arrIsSelected.AddAsLast(0);
          l_arrGroupName.AddAsLast(Translate("Post-shear cleanup input"));
          l_arrGroupName.AddAsLast(Translate("Post-shear cleanup input"));
        }
        else
        {
        }
      }
    }
    VectorCustomDialogs::RadioButtonDialog(t_strKitName, VectorCustomDialogs::ButtonType::Ok, 0, 0, Translate("Select protocol options below"), Translate("Click 'Ok' to continue."), l_arrLabels, l_arrToolTips, l_arrIsEditable, l_arrIsSelected, l_arrGroupName, 0, 0);
    if (l_arrIsSelected.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      t_strInputSelection = Translate("low input");
      t_strInputSelectionReview = Translate("Low mass");
      t_fltSREInputSampleVolume = 25.0;
      t_intSREEluateVolume = 200;
      t_fltSREBufferVolume = 30.0;
      t_intCentrifugationTime = 60;
      t_intSupRemovalHeightMM = 0.8;
      t_intSREMixVolume = 40.0;
      t_strShearingLC = Translate("PacBio_SVF_TransferSample_SurfaceEmpty_Shearing_Ch_400");
      t_fltShearingMixVolume = 166.0;
      t_fltSMRTbellBeadsVolumePostShear = 200.0;
    }
    if (l_arrIsSelected.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      t_strInputSelection = Translate("standard input");
      t_strInputSelectionReview = Translate("High mass");
      t_fltSREInputSampleVolume = 50.0;
      t_intSREEluateVolume = 300;
      t_fltSREBufferVolume = 55.0;
      t_intCentrifugationTime = 60;
      t_intSupRemovalHeightMM = 1.3;
      t_intSREMixVolume = 80.0;
      t_strShearingLC = Translate("PacBio_SVF_TransferSample_SurfaceEmpty_Shearing_Ch_500");
      t_fltShearingMixVolume = 249.0;
      t_fltSMRTbellBeadsVolumePostShear = 300.0;
    }
    t_strInputSelectionDialog = StrConcat2(Translate("Input Selection: "), t_strInputSelection);
    if(0){
      VectorCustomDialogs::AppendStatusText(t_strInputSelectionDialog);
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" ----------------------------------------"), Translate(""), Translate(""), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" -- Input Selection: "), t_strInputSelection, Translate(""), Translate(""));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" ----------------------------------------"), Translate(""), Translate(""), Translate(""));
  }
  if (t_arrBlnProcessActivation.ElementAt( 8 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_strBothTrue = ASWGLOBAL::BOOL::FALSE;
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_strBothTrue = ASWGLOBAL::BOOL::TRUE;
    }
  }
  if (l_strBothTrue == ASWGLOBAL::BOOL::TRUE)
  {
    l_arrLabels.SetSize(0);
    l_arrToolTips.SetSize(0);
    l_arrIsEditable.SetSize(0);
    l_arrIsSelected.SetSize(0);
    l_arrGroupName.SetSize(0);
    l_arrLabels.AddAsLast(Translate("3.1X AMPure PB Cleanup"));
    l_arrLabels.AddAsLast(Translate("1X SMRTbell Cleanup"));
    l_arrToolTips.AddAsLast(Translate("3.1X AMPure PB beads will be used for second cleanup"));
    l_arrToolTips.AddAsLast(Translate("1X SMRTbell Cleanup will be used for second cleanup"));
    l_arrIsEditable.AddAsLast(1);
    l_arrIsEditable.AddAsLast(1);
    l_arrIsSelected.AddAsLast(0);
    l_arrIsSelected.AddAsLast(0);
    l_arrGroupName.AddAsLast(Translate("Final cleanup selection"));
    l_arrGroupName.AddAsLast(Translate("Final cleanup selection"));
    l_arrLabels.AddAsLast(Translate("96-channel Multi-Probe Head (MPH)"));
    l_arrLabels.AddAsLast(Translate("8 x 1000µl pipetting channels"));
    l_arrToolTips.AddAsLast(Translate("Optimize method to use MPH for Adapter Transfer"));
    l_arrToolTips.AddAsLast(Translate("Optimize method to use channels for Adapter Transfer"));
    l_arrIsEditable.AddAsLast(1);
    l_arrIsEditable.AddAsLast(1);
    l_arrIsSelected.AddAsLast(1);
    l_arrIsSelected.AddAsLast(0);
    l_arrGroupName.AddAsLast(Translate("Channel use for adapter transfer"));
    l_arrGroupName.AddAsLast(Translate("Channel use for adapter transfer"));
    VectorCustomDialogs::RadioButtonDialog(t_strKitName, VectorCustomDialogs::ButtonType::Ok, 0, 0, Translate("Select protocol options below"), Translate("Click 'Ok' to continue."), l_arrLabels, l_arrToolTips, l_arrIsEditable, l_arrIsSelected, l_arrGroupName, 0, 0);
    t_strFinalCleanup = Translate("N/A");
    if (l_arrIsSelected.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      t_blnActivateSizeSelectionDilutedAMPure = ASWGLOBAL::BOOL::TRUE;
      t_blnActivateSizeSelection = ASWGLOBAL::BOOL::TRUE;
      t_strFinalCleanup = Translate("3.1X AMPure PB cleanup");
    }
    else
    {
      if (l_arrIsSelected.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        t_strFinalCleanup = Translate("1X SMRTbell Cleanup");
      }
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" ----------------------------------------"), Translate(""), Translate(""), Translate(""));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" -- 3.1x AMPure PB Cleanup : "), t_blnActivateSizeSelectionDilutedAMPure, Translate(""), Translate(""));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("----------------------------------------"), Translate(""), Translate(""), Translate(""));
    }
    if (l_arrIsSelected.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      t_blnUseMPHForAdapterTransfer = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      t_blnUseMPHForAdapterTransfer = ASWGLOBAL::BOOL::FALSE;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" -- Use MPH : "), t_blnUseMPHForAdapterTransfer, Translate(""), Translate(""));
  }
  else
  {
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_arrLabels.SetSize(0);
      l_arrToolTips.SetSize(0);
      l_arrIsEditable.SetSize(0);
      l_arrIsSelected.SetSize(0);
      l_arrGroupName.SetSize(0);
      l_arrLabels.AddAsLast(Translate("96-channel Multi-Probe Head (MPH)"));
      l_arrLabels.AddAsLast(Translate("8 x 1000µl pipetting channels"));
      l_arrToolTips.AddAsLast(Translate("Optimize method to use MPH for Adapter Transfer"));
      l_arrToolTips.AddAsLast(Translate("Optimize method to use channels for Adapter Transfer"));
      l_arrIsEditable.AddAsLast(1);
      l_arrIsEditable.AddAsLast(1);
      l_arrIsSelected.AddAsLast(1);
      l_arrIsSelected.AddAsLast(0);
      l_arrGroupName.AddAsLast(Translate("Channel use for adapter transfer"));
      l_arrGroupName.AddAsLast(Translate("Channel use for adapter transfer"));
      VectorCustomDialogs::RadioButtonDialog(t_strKitName, VectorCustomDialogs::ButtonType::Ok, 0, 0, Translate("Select protocol options below"), Translate("Click 'Ok' to continue."), l_arrLabels, l_arrToolTips, l_arrIsEditable, l_arrIsSelected, l_arrGroupName, 0, 0);
      t_strFinalCleanup = Translate("N/A");
      if (l_arrIsSelected.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        t_blnUseMPHForAdapterTransfer = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        t_blnUseMPHForAdapterTransfer = ASWGLOBAL::BOOL::FALSE;
      }
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" -- Use MPH : "), t_blnUseMPHForAdapterTransfer, Translate(""), Translate(""));
    }
    if (t_arrBlnProcessActivation.ElementAt( 8 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_arrLabels.SetSize(0);
      l_arrToolTips.SetSize(0);
      l_arrIsEditable.SetSize(0);
      l_arrIsSelected.SetSize(0);
      l_arrGroupName.SetSize(0);
      l_arrLabels.AddAsLast(Translate("3.1X AMPure PB Cleanup"));
      l_arrLabels.AddAsLast(Translate("1X SMRTbell Cleanup"));
      l_arrToolTips.AddAsLast(Translate("3.1X AMPure PB beads will be used for second cleanup"));
      l_arrToolTips.AddAsLast(Translate("1X SMRTbell Cleanup will be used for second cleanup"));
      l_arrIsEditable.AddAsLast(1);
      l_arrIsEditable.AddAsLast(1);
      l_arrIsSelected.AddAsLast(0);
      l_arrIsSelected.AddAsLast(0);
      l_arrGroupName.AddAsLast(Translate("Final cleanup selection"));
      l_arrGroupName.AddAsLast(Translate("Final cleanup selection"));
      VectorCustomDialogs::RadioButtonDialog(t_strKitName, VectorCustomDialogs::ButtonType::Ok, 0, 0, Translate("Select protocol options below"), Translate("Click 'Ok' to continue."), l_arrLabels, l_arrToolTips, l_arrIsEditable, l_arrIsSelected, l_arrGroupName, 0, 0);
      t_strFinalCleanup = Translate("N/A");
      if (l_arrIsSelected.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        t_blnActivateSizeSelectionDilutedAMPure = ASWGLOBAL::BOOL::TRUE;
        t_blnActivateSizeSelection = ASWGLOBAL::BOOL::TRUE;
        t_strFinalCleanup = Translate("3.1X AMPure PB Cleanup");
      }
      else
      {
        if (l_arrIsSelected.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
        {
          t_strFinalCleanup = Translate("1X SMRTbell Cleanup");
        }
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" ----------------------------------------"), Translate(""), Translate(""), Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" -- 3.1X AMPure PB Cleanup : "), t_blnActivateSizeSelectionDilutedAMPure, Translate(""), Translate(""));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("----------------------------------------"), Translate(""), Translate(""), Translate(""));
      }
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" -- Use MPH : "), t_blnUseMPHForAdapterTransfer, Translate(""), Translate(""));
    }
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("t_arrblnProcessActivation:"), t_arrBlnProcessActivation);
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function _DATA_SequenceDefinitions(  ) void {
  private variable l_strWorklistFileDirectory;
  private variable retValueDialog;
  private variable o_intNumberOfSamples;
  private variable l_blnUseSampleCount;
  private variable l_blnUseInputWorklist;
  private variable l_arrWellPosition[];
  private variable l_arrBarcode[];
  private variable l_arrComment[];
  private variable l_arrSampleID[];
  private variable t_intAdapterPositionsToShift;
  private variable t_intAdapterPositionStart;
  private variable t_intAdapterPositionEnd;
  private variable l_arrCustomToolTip[];
  private variable l_arrResult[];
  private variable l_arrInputListLabels[];
  private variable l_arrInputListValues[];
  private variable l_arrDataTypes[];
  private variable l_arrRanges[];
  private variable l_arrInputListUnits[];
  private variable l_strToBeContinued;
  private variable loopCounter1;
  private dialog customDialog_1;
  private variable l_DivisibleBy8;
  private dialog customDialog_2;
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  l_strWorklistFileDirectory = Translate("C:\Program Files (x86)\HAMILTON\NGSStar\PacBio\Library Prep\Files\Example Worklists");
  l_strToBeContinued = ASWGLOBAL::BOOL::TRUE;
  {
    loopCounter1 = 0;
    while (l_strToBeContinued == ASWGLOBAL::BOOL::TRUE)
    {
      loopCounter1 = loopCounter1 + 1;
      customDialog_1.InitCustomDialog("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");
      customDialog_1.SetCustomDialogProperty( "path1.Path", l_strWorklistFileDirectory );
      customDialog_1.ShowCustomDialog();
      retValueDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
      l_blnUseInputWorklist = customDialog_1.GetCustomDialogProperty( "radioButton1.IsChecked" );
      l_blnUseSampleCount = customDialog_1.GetCustomDialogProperty( "radioButton2.IsChecked" );
      o_intNumberOfSamples = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
      l_strWorklistFileDirectory = customDialog_1.GetCustomDialogProperty( "path1.Path" );
      l_DivisibleBy8 = o_intNumberOfSamples % 8;
      if (l_DivisibleBy8 != 0)
      {
        customDialog_2.InitCustomDialog("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");
        customDialog_2.ShowCustomDialog();
      }
      else
      {
        l_strToBeContinued = ASWGLOBAL::BOOL::FALSE;
      }
    }
  }
  if (l_blnUseSampleCount == ASWGLOBAL::BOOL::TRUE)
  {
    t_intNumberOfSamples = o_intNumberOfSamples;
  }
  if (l_blnUseInputWorklist == ASWGLOBAL::BOOL::TRUE)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Worklist pathway: "), l_strWorklistFileDirectory);
    DATACONTROLLER::FILE_StandardWorklist_Extraction(l_strWorklistFileDirectory, Translate(","), l_arrSampleID, l_arrBarcode, l_arrWellPosition, l_arrComment);
    t_intNumberOfSamples=l_arrSampleID.GetSize();
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Number of Samples: "), t_intNumberOfSamples);
  if (t_intNumberOfSamples < 89)
  {
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_arrInputListLabels.SetSize(0);
      l_arrInputListValues.SetSize(0);
      l_arrInputListUnits.SetSize(0);
      l_arrDataTypes.SetSize(0);
      l_arrRanges.SetSize(0);
      l_arrCustomToolTip.SetSize(0);
      l_arrResult.SetSize(0);
      l_arrInputListLabels.AddAsLast(Translate("Column start: "));
      l_arrInputListValues.AddAsLast(Translate("1"));
      l_arrInputListUnits.AddAsLast(Translate("Range: 1 - 12"));
      l_arrDataTypes.AddAsLast(1);
      l_arrRanges.AddAsLast(Translate("1|12"));
      l_arrCustomToolTip.AddAsLast(Translate("1"));
      VectorCustomDialogs::InputDialog(t_strKitName, VectorCustomDialogs::ButtonType::Ok, 0, 0, Translate("Enter start column for adapter index plate transfer:"), Translate("Vortex and quick spin prior to loading with seal removed for selected columns."), l_arrInputListLabels, l_arrInputListValues, l_arrInputListUnits, l_arrDataTypes, l_arrRanges, l_arrCustomToolTip, l_arrResult);
      t_intAdapterColumnStart = l_arrResult.ElementAt( 1 -1);
      t_strAdapterColumnStart = StrIStr(t_intAdapterColumnStart);
      t_strAdapterColStatus = StrConcat2(Translate("Adapter Starting Column Selected by User"), t_strAdapterColumnStart);
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, Translate("-----"));
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, t_strAdapterColStatus);
      DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, Translate("-----"));
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" -- Adapter Column Start Selected by User : "), t_intAdapterColumnStart, Translate(""), Translate(""));
    }
  }
  else
  {
    t_intAdapterColumnStart = 1;
    t_strAdapterColumnStart = StrIStr(t_intAdapterColumnStart);
    t_strAdapterColStatus = StrConcat2(Translate("Adapter Starting Column Selected by User"), t_strAdapterColumnStart);
    DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, Translate("-----"));
    DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, t_strAdapterColStatus);
    DATACONTROLLER::FILE_UpdateTrackingFileStatus(ASWGLOBAL::BOOL::FALSE, Translate("-----"));
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(" -- Adapter Column Start Selected by User : "), t_intAdapterColumnStart, Translate(""), Translate(""));
  }
  ML_STAR.RGT_Beads.SetCount(t_intNumberOfSamples);
  ML_STAR.RGT_ElutionBuffer.SetCount(t_intNumberOfSamples);
  ML_STAR.RGT_Beads_SizeSelection.SetCount(t_intNumberOfSamples);
  ML_STAR.RGT_M1ElutionBuffer.SetCount(t_intNumberOfSamples);
  ML_STAR.HHS1_HSP.SetCount(t_intNumberOfSamples);
  ML_STAR.HHS2_HSP.SetCount(t_intNumberOfSamples);
  ML_STAR.HHS3_HSP.SetCount(t_intNumberOfSamples);
  ML_STAR.HHS3_MIDI.SetCount(t_intNumberOfSamples);
  ML_STAR.HHS4_MIDI.SetCount(t_intNumberOfSamples);
  ML_STAR.HHS5_MIDI.SetCount(t_intNumberOfSamples);
  ML_STAR.MIDI_OnMagnet.SetCount(t_intNumberOfSamples);
  ML_STAR.HSP_OnMagnet.SetCount(t_intNumberOfSamples);
  ML_STAR.HSP_Pipette.SetCount(t_intNumberOfSamples);
  ML_STAR.HSP_Pipette2.SetCount(t_intNumberOfSamples);
  ML_STAR.MIDI_Pipette.SetCount(t_intNumberOfSamples);
  ML_STAR.CPAC_HSP_0001.SetCount(t_intNumberOfSamples);
  t_intAdapterColumnStart = t_intAdapterColumnStart - 1;
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Adjusted 0 based starting column: "), t_intAdapterColumnStart);
  t_intAdapterPositionsToShift = t_intAdapterColumnStart * 8;
  t_intAdapterPositionStart = t_intAdapterPositionsToShift + 1;
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Adapter Positions to Shift: "), t_intAdapterPositionsToShift);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Adapter Position Start: "), t_intAdapterPositionStart);
  ML_STAR.HSP_Adapters.SetCurrentPosition(t_intAdapterPositionStart);
  t_intAdapterPositionEnd = t_intAdapterPositionStart + t_intNumberOfSamples;
  ML_STAR.HSP_Adapters.SetCount(t_intAdapterPositionEnd);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Adapter Position End: "), t_intAdapterPositionEnd);
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function M3_EndRepairAndATailing(  ) void {
  private timer l_hdlM1FirstIncubation;
  private timer l_hdlM1SecondIncubation;
  private dialog customDialog_3;
  private dialog customDialog_4;
  private dialog customDialog_5;
  private dialog customDialog_6;
  private variable o_dialog;
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  MECC::TraceComment(Translate("Start temperatures & checks"));
  _TimeStamp(Translate("Start temperature for heat blocks"), o_dialog);
  HAMILTONHEATERSHAKERCONTROL::StartTemperatureControl(ML_STAR, 1, 37.0, ASWGLOBAL::BOOL::FALSE);
  HAMILTONHEATERSHAKERCONTROL::StartTemperatureControl(ML_STAR, 2, 65.0, ASWGLOBAL::BOOL::FALSE);
  _TimeStamp(Translate("Check CPAC temperature"), o_dialog);
  CPACCONTROLLER::CPAC_CheckTemperature(4, 2);
  CPACCONTROLLER::CPAC_CheckTemperature(4, 1);
  _TimeStamp(Translate("Move sample plate to CPAC"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.CPAC_HSP_0001, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  _TimeStamp(Translate("Transfer Repair master mix"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispense(ML_STAR, 2, ML_STAR.RGT_Module1PreMix, ML_STAR.CPAC_HSP_0001, t_fltM1EndRepairDDRATailingMix, Translate("PacBio_50F_EndRepairDDRATailingMix_SurfaceEmpty_v2"), 0, 0, 0, 0, 0, 0.0, ASWGLOBAL::BOOL::FALSE, Translate("Addition of End-repair/DDR/A-tailing premix"), 0);
  _TimeStamp(Translate("Move sample plate from CPAC to processing location"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.CPAC_HSP_0001, ML_STAR.HSP_Pipette, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  _TimeStamp(Translate("Mix plate"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_MixPlateV4(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_Pipette, Translate("PacBio_50F_EndRepairDDRATailingMix_SurfaceEmpty_v2"), 0, 2.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 30, 48.0, Translate("Mix End Repair Master Mix with sample"), 1, 1);
  HAMILTONHEATERSHAKERCONTROL::WaitForTemperatureControl(1, 37.0, 20);
  HAMILTONHEATERSHAKERCONTROL::WaitForTemperatureControl(2, 65.0, 20);
  _TimeStamp(Translate("Seal plate"), o_dialog);
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  customDialog_5.InitCustomDialog("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");
  customDialog_5.ShowCustomDialog();
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  _TimeStamp(Translate("Move sample plate to HHS 1"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HHS1_HSP, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("Implement plate tap with teaching needles\n\ncontact the edges of a plate if present"));
  if (t_blnSkipNeedlePlateTap == ASWGLOBAL::BOOL::FALSE)
  {
    _TimeStamp(Translate("Check plate moved"), o_dialog);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    t_blnPlateExists = STAR_CHANNEL_TOOLS::MOVE_CheckPlateWithTwoChannels(ML_STAR, 8, ML_STAR.HHS1_HSP, 75.0);
    if (t_blnPlateExists == ASWGLOBAL::BOOL::FALSE)
    {
      customDialog_3.InitCustomDialog("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");
      customDialog_3.ShowCustomDialog();
      t_blnPlateExists = STAR_CHANNEL_TOOLS::MOVE_CheckPlateWithTwoChannels(ML_STAR, 8, ML_STAR.HHS1_HSP, 75.0);
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    else
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
  }
  _TimeStamp(Translate("37C incubation"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(1800, Translate("DNA Repair First Incubation"), ASWGLOBAL::BOOL::TRUE, l_hdlM1FirstIncubation);
  _TimeStamp(Translate("Move sample plate to HHS 2"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HHS1_HSP, ML_STAR.HHS2_HSP, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("Implement plate tap with teaching needles\n\ncontact the edges of a plate if present"));
  if (t_blnSkipNeedlePlateTap == ASWGLOBAL::BOOL::FALSE)
  {
    _TimeStamp(Translate("Check plate moved"), o_dialog);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    t_blnPlateExists = STAR_CHANNEL_TOOLS::MOVE_CheckPlateWithTwoChannels(ML_STAR, 8, ML_STAR.HHS2_HSP, 75.0);
    if (t_blnPlateExists == ASWGLOBAL::BOOL::FALSE)
    {
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
      t_blnPlateExists = STAR_CHANNEL_TOOLS::MOVE_CheckPlateWithTwoChannels(ML_STAR, 8, ML_STAR.HHS1_HSP, 75.0);
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    else
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
  }
  _TimeStamp(Translate("65C incubation"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(300, Translate("DNA Repair Second Incubation"), ASWGLOBAL::BOOL::TRUE, l_hdlM1SecondIncubation);
  HAMILTONHEATERSHAKERCONTROL::StopTemperatureControl(ML_STAR, 1);
  HAMILTONHEATERSHAKERCONTROL::StopTemperatureControl(ML_STAR, 2);
  _TimeStamp(Translate("Move sample plate to processing location"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HHS2_HSP, ML_STAR.HSP_Pipette, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  _TimeStamp(Translate("Unseal plate"), o_dialog);
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  customDialog_6.InitCustomDialog("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");
  customDialog_6.ShowCustomDialog();
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  CPACCONTROLLER::CPAC_StopTemp(1);
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function M4_AdapterLigation(  ) void {
  private timer l_hdlAdapterLigationMixIncubation;
  private variable o_dialog;
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  MECC::TraceComment(Translate("Check CPAC reaches 4C "));
  _TimeStamp(Translate("Check CPAC temp"), o_dialog);
  CPACCONTROLLER::CPAC_CheckTemperature(0, 2);
  MECC::TraceComment(Translate("Transfer barcoded Adapters from plate to sample plate"));
  _TimeStamp(Translate("Transfer adapters"), o_dialog);
  if (t_blnUseMPHForAdapterTransfer == ASWGLOBAL::BOOL::TRUE)
  {
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_TransferAdapters(ML_STAR, ML_STAR.HSP_Adapters, ML_STAR.HSP_Pipette, t_fltM2Adapters, Translate("PacBio_50FMPH_IndexAdapters_SurfaceEmpty"), 0.3, 1.1, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, 0, 0, 0, 0, Translate("Addition of Adapters"), 0);
  }
  else
  {
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispense(ML_STAR, 2, ML_STAR.HSP_Adapters, ML_STAR.HSP_Pipette, t_fltM2Adapters, Translate("PacBio_50FMPH_IndexAdapters_SurfaceEmpty"), 0.5, 0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Addition of Adapters"), 0);
  }
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_CleanUpTipAdapter(ML_STAR);
  MECC::TraceComment(Translate("Transfer Ligation Master Mix to sample plate"));
  _TimeStamp(Translate("Transfer Ligation master mix"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispense(ML_STAR, 2, ML_STAR.RGT_Module2PreMix, ML_STAR.HSP_Pipette, t_fltM2AdapterLigationMix, Translate("PacBio_50F_LigationMasterMix_SurfaceEmpty"), 0, 0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Addition of Ligation premix"), 0);
  _TimeStamp(Translate("Move sample plate to HHS to mix"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HHS3_HSP, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  HAMILTONHEATERSHAKERCONTROL::ShakeStart(ML_STAR, 3, 1400);
  DATACONTROLLER::TIME_TimerStart(60, Translate("1 min shake"), ASWGLOBAL::BOOL::TRUE, l_hdlAdapterLigationMixIncubation);
  HAMILTONHEATERSHAKERCONTROL::StopShaker(ML_STAR, 3);
  _TimeStamp(Translate("Move sample plate to processing location"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HHS3_HSP, ML_STAR.HSP_Pipette, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  _TimeStamp(Translate("Adapter ligation incubation"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(1800, Translate("Adapter Ligation Incubation"), ASWGLOBAL::BOOL::TRUE, t_hdlM2Incubation);
  MECC::TraceComment(Translate("Move Adapter plate from processing location to stack"));
  _TimeStamp(Translate("Move adapter plate to stack"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HSP_Pipette2, ML_STAR.Stack_03_Parking, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function M5_CleanUp1(  ) void {
  private timer l_hdlCleanupBindingIncubation;
  private timer l_hdlMagnetSettleTimer;
  private timer l_hdlElutionIncubation;
  private timer l_EthanolDryTimer;
  private dialog customDialog_7;
  private dialog customDialog_8;
  private variable o_dialog;
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  _TimeStamp(Translate("Mix SMRTbell cleanup beads in reservoir"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispense(ML_STAR, 0, ML_STAR.RGT_Beads, ML_STAR.RGT_Beads, 0.0, Translate("PacBio_HighVolume_PurificationBeadsMix_SurfaceEmpty"), 1.0, 2.0, 0, 0, 20, 1000.0, ASWGLOBAL::BOOL::FALSE, Translate("Mix SMRTbell beads"), 0);
  _TimeStamp(Translate("Transfer SRMTbell cleanup beads to sample plate"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispense(ML_STAR, 2, ML_STAR.RGT_Beads, ML_STAR.HSP_Pipette, t_fltM3MagBeads, Translate("PacBio_SVF_ProNexPurificationBeads_SurfaceEmpty_v3"), 0, 0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Add beads to Ligation Solution Output Hardshell Plate"), 0);
  _TimeStamp(Translate("Mix sample plate"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_MixPlate(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_Pipette, 0, Translate("PacBio_SVF_ProNexPurificationBeads_SurfaceEmpty_Prewet_v3"), 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 20, 136.0, 0, 0, Translate("Mix beads + Ligation Solution with MPH"), 1);
  _TimeStamp(Translate("Bead binding incubation"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(600, Translate("Initial bead binding incubation"), ASWGLOBAL::BOOL::TRUE, l_hdlCleanupBindingIncubation);
  _TimeStamp(Translate("Move sample plate to magnet"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_OnMagnet, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  _TimeStamp(Translate("Magnet settle timer"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(200, Translate("Magnet settle timer"), ASWGLOBAL::BOOL::TRUE, l_hdlMagnetSettleTimer);
  _TimeStamp(Translate("Remove supernatant"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_RemoveSupernatant(ML_STAR, ML_STAR.HSP_OnMagnet, ML_STAR.LiquidWaste_MPH, Translate("PacBio_SVF_SupernatantRemovalFirst_JetEmpty"), Translate("PacBio_SVF_SupernatantRemovalSecond_JetEmpty"), 270.0, 30.0, Translate("Remove supernatant"));
  _TimeStamp(Translate("80% ethanol wash"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_EthanolWashV2_HSP(ML_STAR, ML_STAR.RGT_Ethanol, ML_STAR.HSP_OnMagnet, ML_STAR.LiquidWaste_MPH, 200.0, 200.0, 30.0, Translate("PacBio_SVFMPH_EthanolWash_SurfaceEmptyV2"), Translate("PacBio_SVF_SupernatantRemovalFirst_JetEmpty"), Translate("PacBio_SVF_SupernatantRemovalSecond_JetEmpty_HSP"), Translate("Ethanol Wash HSP"));
  _TimeStamp(Translate("Bead drying"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(60, Translate("Ethanol Drying"), ASWGLOBAL::BOOL::TRUE, l_EthanolDryTimer);
  _TimeStamp(Translate("Move sample plate off magnet"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HSP_OnMagnet, ML_STAR.HSP_Pipette, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("Transfer elution buffer to Hardshell Plate"));
  _TimeStamp(Translate("Transfer Elution buffer to sample plate"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispense(ML_STAR, 2, ML_STAR.RGT_ElutionBuffer, ML_STAR.HSP_Pipette, t_fltM3ElutionBuffer, Translate("PacBio_50F_EB_SurfaceEmpty_v2"), 0, 2.0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Addition of Elution Buffer to Hardshell plate"), 0);
  _TimeStamp(Translate("Mix sample plate"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_MixPlateV3(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_Pipette, Translate("PacBio_SVF_AdaptiveLoadingElutionBuffer_DispenseSurface_Empty"), 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 10, 32.0, Translate("MPH pipette mix (elution + bead pellet)"), 1);
  _TimeStamp(Translate("Move sample plate to HHS to mix"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HHS3_HSP, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  HAMILTONHEATERSHAKERCONTROL::ShakeStart(ML_STAR, 3, 1400);
  DATACONTROLLER::TIME_TimerStart(30, Translate("30 second shake"), ASWGLOBAL::BOOL::TRUE, l_hdlElutionIncubation);
  HAMILTONHEATERSHAKERCONTROL::StopShaker(ML_STAR, 3);
  _TimeStamp(Translate("Elution incubation"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(300, Translate("Elution incubation"), ASWGLOBAL::BOOL::TRUE, l_hdlElutionIncubation);
  _TimeStamp(Translate("Move sample plate to magnet"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HHS3_HSP, ML_STAR.HSP_OnMagnet, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  _TimeStamp(Translate("Magnet settle timer"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(200, Translate("Magnet settle timer"), ASWGLOBAL::BOOL::FALSE, l_hdlMagnetSettleTimer);
  _TimeStamp(Translate("Move plate from stack"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.Stack_04, ML_STAR.HSP_Pipette, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  APPSLIB::SequenceIncrement(ML_STAR.Stack_04, 1);
  DATACONTROLLER::TIME_WaitForTimer(l_hdlMagnetSettleTimer);
  _TimeStamp(Translate("Transfer sample to new plate"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_SingleDispense(ML_STAR, ML_STAR.HSP_OnMagnet, ML_STAR.HSP_Pipette, t_fltM3ElutionBufferTransfer, Translate("PacBio_50F_96MPH_Eluent_SurfaceEmpty"), 0.1, 2.0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, 0, 0, 0, 0, Translate("Eluent Transfer"), 1);
  _TimeStamp(Translate("Move plate on magnet to waste"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HSP_OnMagnet, ML_STAR.HSP_Waste, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_CleanUpTipAdapter(ML_STAR);
  if (t_blnQCPausesActivated == ASWGLOBAL::BOOL::TRUE)
  {
    _TimeStamp(Translate("Method paused for QC"), o_dialog);
    customDialog_7.InitCustomDialog("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");
    customDialog_7.ShowCustomDialog();
  }
  if (t_intSelectedIndexSTOP == 6)
  {
    customDialog_8.InitCustomDialog("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");
    customDialog_8.ShowCustomDialog();
  }
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function M6_NucleaseTreatment(  ) void {
  private timer l_hdlM4IncubationTimer;
  private dialog customDialog_9;
  private variable l_intArraySize;
  private dialog customDialog_10;
  private variable i_arrColumnHeaders[];
  private variable l_arrLabwarePositions[];
  private variable l_arrLabwareQuantities[];
  private variable l_arrLabwareDescriptions[];
  private variable l_strLabwareDescription;
  private variable l_intNumberOfTubes;
  private variable o_dialog;
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  _TimeStamp(Translate("Start heat block temperature 37C"), o_dialog);
  HAMILTONHEATERSHAKERCONTROL::StartTemperatureControl(ML_STAR, 1, 37.0, ASWGLOBAL::BOOL::FALSE);
  _TimeStamp(Translate("Prepare and load Nuclease treatment master mix"), o_dialog);
  ARW_LOADINGLIB::ARW_LoadingLib_START(ML_STAR, Translate("NGSStar"), t_strKitVendor, t_strKitName);
  t_fltM4NucleaseTreatmentMix = ARW_LOADINGLIB::Define_VolumePerWell(Translate("Nuclease master mix"), 10.0);
  ARW_LOADINGLIB::Define_VolumePerWell_MastermixComponent(Translate("Nuclease master mix"), Translate("Nuclease mix 96"), 5.0);
  ARW_LOADINGLIB::Define_VolumePerWell_MastermixComponent(Translate("Nuclease master mix"), Translate("Nuclease buffer 96"), 5.0);
  if (t_intNumberOfSamples <= 24)
  {
    ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Nuclease master mix"), t_intNumberOfSamples, Translate("2mL Sarstedt tube"), 2000.0, 42.0, 10.0, 0.0, ML_STAR.RGT_Module4PreMix, 1, t_arrVolumePerTubeNucleaseTreatmentPreMix);
  }
  else
  {
    if (t_intNumberOfSamples <= 48)
    {
      ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Nuclease master mix"), t_intNumberOfSamples, Translate("2mL Sarstedt tube"), 2000.0, 42.0, 10.0, 0.0, ML_STAR.RGT_Module4PreMix, 2, t_arrVolumePerTubeNucleaseTreatmentPreMix);
    }
    else
    {
      if (t_intNumberOfSamples <= 72)
      {
        ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Nuclease master mix"), t_intNumberOfSamples, Translate("2mL Sarstedt tube"), 2000.0, 42.0, 10.0, 0.0, ML_STAR.RGT_Module4PreMix, 3, t_arrVolumePerTubeNucleaseTreatmentPreMix);
      }
      else
      {
        ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("Nuclease master mix"), t_intNumberOfSamples, Translate("2mL Sarstedt tube"), 2000.0, 42.0, 10.0, 0.0, ML_STAR.RGT_Module4PreMix, 4, t_arrVolumePerTubeNucleaseTreatmentPreMix);
      }
    }
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("t_arrVolumePerTubeNucleaseTreatmentPreMix"), t_arrVolumePerTubeNucleaseTreatmentPreMix);
  l_intArraySize=t_arrVolumePerTubeNucleaseTreatmentPreMix.GetSize();
  ML_STAR.RGT_Module4PreMix.SetCount(l_intArraySize);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, ML_STAR.RGT_Module4PreMix);
  ARW_LOADINGLIB::Evaluate_ResourcesByCarrier();
  l_arrLabwarePositions.SetSize(0);
  l_arrLabwareQuantities.SetSize(0);
  l_arrLabwareDescriptions.SetSize(0);
  if (t_intNumberOfSamples <= 24)
  {
    l_intNumberOfTubes = 1;
  }
  else
  {
    if (t_intNumberOfSamples <= 48)
    {
      l_intNumberOfTubes = 2;
    }
    else
    {
      if (t_intNumberOfSamples <= 72)
      {
        l_intNumberOfTubes = 3;
      }
      else
      {
        l_intNumberOfTubes = 4;
      }
    }
  }
  l_strLabwareDescription = StrConcat12(l_intNumberOfTubes, Translate(" x (2mL Sarstedt tube) "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  l_arrLabwarePositions.AddAsLast(Translate("  Nuclease master mix  "));
  l_arrLabwareQuantities.AddAsLast(Translate("[306.0µL] total volume per tube"));
  l_arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
  l_arrLabwarePositions.AddAsLast(Translate("  --- Nuclease buffer 96"));
  l_arrLabwareQuantities.AddAsLast(Translate(" -- 153.0µL"));
  l_arrLabwareDescriptions.AddAsLast(Translate(""));
  l_arrLabwarePositions.AddAsLast(Translate("  --- Nuclease mix 96"));
  l_arrLabwareQuantities.AddAsLast(Translate(" -- 153.0µL"));
  l_arrLabwareDescriptions.AddAsLast(Translate(""));
  i_arrColumnHeaders.SetSize(0);
  i_arrColumnHeaders.AddAsLast(Translate("Name"));
  i_arrColumnHeaders.AddAsLast(Translate("Volume (µL) per tube"));
  i_arrColumnHeaders.AddAsLast(Translate("Amount of tubes x Labware"));
  VectorCustomDialogs::LoadingDialogSetResources(i_arrColumnHeaders);
  VectorCustomDialogs::LoadingDialog(Translate("Master mix preparation"), VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Prepare master mix on ice into 2mL Sarstedt tube(s) according to instructions below. Click 'Ok' to continue."), Translate("Mix reagent buffers with a brief vortex prior to use. Do not vortex enzymes.\nPipette mix until solution appears homogenous.\nQuick-spin all reagents in a microcentrifuge to collect liquid at the bottom prior to placing on the 4°C CPAC."), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\PacBio\Library Prep\Files\Pictures\MasterMix.png"), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\PacBio\Library Prep\Files\Pictures\2mLStarsedtTube.PNG"), 300, l_arrLabwarePositions, l_arrLabwareQuantities, l_arrLabwareDescriptions);
  ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier14, Translate("Carrier14Pos5.jpg"), Translate("Carrier14-CPAC.jpg"));
  _TimeStamp(Translate("Check CPAC temperature"), o_dialog);
  CPACCONTROLLER::CPAC_CheckTemperature(4, 2);
  _TimeStamp(Translate("Transfer Nuclease treatment master mix to sample plate"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispense(ML_STAR, 2, ML_STAR.RGT_Module4PreMix, ML_STAR.HSP_Pipette, t_fltM4NucleaseTreatmentMix, Translate("PacBio_50F_NucleaseTreatmentMix_SurfaceEmpty_v2"), 0, 2, 0, 0, 0, 0.0, ASWGLOBAL::BOOL::FALSE, Translate("Addition of NucleaseTreatment premix"), 0);
  _TimeStamp(Translate("Mix sample plate"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_MixPlateV4(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_Pipette, Translate("PacBio_50F_NucleaseTreatmentMix_SurfaceEmpty"), 0.5, 3.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 30, 40.0, Translate("Mix Nuclease Master Mix with sample"), 1, 1);
  MECC::TraceComment(Translate("Check incubation temps on HHS before moving plates"));
  HAMILTONHEATERSHAKERCONTROL::WaitForTemperatureControl(1, 37.0, 20);
  MECC::TraceComment(Translate("Move plate to HHS1"));
  _TimeStamp(Translate("Move sample plate to heat block"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HHS1_HSP, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("Implement plate tap with teaching needles\n\ncontact the edges of a plate if present"));
  if (t_blnSkipNeedlePlateTap == ASWGLOBAL::BOOL::FALSE)
  {
    _TimeStamp(Translate("Check plate moved"), o_dialog);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    t_blnPlateExists = STAR_CHANNEL_TOOLS::MOVE_CheckPlateWithTwoChannels(ML_STAR, 8, ML_STAR.HHS1_HSP, 75.0);
    if (t_blnPlateExists == ASWGLOBAL::BOOL::FALSE)
    {
      customDialog_9.InitCustomDialog("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");
      customDialog_9.ShowCustomDialog();
      t_blnPlateExists = STAR_CHANNEL_TOOLS::MOVE_CheckPlateWithTwoChannels(ML_STAR, 8, ML_STAR.HHS1_HSP, 75.0);
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    else
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
  }
  MECC::TraceComment(Translate("Incubate on HHS"));
  _TimeStamp(Translate("Nuclease treatment incubation"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(900, Translate("Nuclease Treatment Incubation"), ASWGLOBAL::BOOL::TRUE, l_hdlM4IncubationTimer);
  _TimeStamp(Translate("Move sample plate to processing location"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HHS1_HSP, ML_STAR.HSP_Pipette, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  HAMILTONHEATERSHAKERCONTROL::StopTemperatureControl(ML_STAR, 1);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_CleanUpTipAdapter(ML_STAR);
  if (t_blnQCPausesActivated == ASWGLOBAL::BOOL::TRUE)
  {
    _TimeStamp(Translate("Method pause for QC"), o_dialog);
    customDialog_10.InitCustomDialog("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");
    customDialog_10.ShowCustomDialog();
  }
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function M7_CleanUp2(  ) void {
  private timer l_hdlCleanupBindingIncubation;
  private timer l_hdlMagnetSettleTimer;
  private timer l_hdlElutionIncubation;
  private timer l_EthanolDryTimer;
  private timer l_hdlBeadBindingMix;
  private dialog customDialog_11;
  private variable t_arrVolumePerWellDilutedAmpure[];
  private variable l_strLabwareDescription;
  private variable l_strAmpureQuantity;
  private variable l_intTotalAmpureDilNeededForStockTube;
  private variable l_intAmpureBeadsForStockTube;
  private variable l_strEBQuantity;
  private variable l_intElutionBufferForStockTube;
  private variable t_strReturn;
  private variable arrLabwareDescriptions[];
  private variable arrLabwarePositions[];
  private variable i_arrColumnHeaders[];
  private variable arrLabwareQuantities[];
  private variable l_strElutionBufferForStockTube;
  private variable l_strAmpureBeadsForStockTube;
  private dialog customDialog_12;
  private dialog customDialog_13;
  private variable o_dialog;
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  if (t_blnActivateSizeSelection == ASWGLOBAL::BOOL::FALSE)
  {
    if (t_intSelectedIndexSTART != 8)
    {
      _TimeStamp(Translate("Move deep well plate from stack"), o_dialog);
      STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.Stack_01, ML_STAR.MIDI_Pipette, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    }
    MECC::TraceComment(Translate("Mix Beads"));
    _TimeStamp(Translate("Mix SMRTbell cleanup beads in reservoir"), o_dialog);
    if (t_intNumberOfSamples > 48)
    {
      STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MixLiquid(ML_STAR, 5, ML_STAR.RGT_Beads, 0, 3500, 2, 0, 1000, 3500, 20);
    }
    else
    {
      STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispense(ML_STAR, 0, ML_STAR.RGT_Beads, ML_STAR.RGT_Beads, 0.0, Translate("PacBio_HighVolume_PurificationBeadsMix_SurfaceEmpty"), 1.0, 2.0, 0, 0, 20, 900.0, ASWGLOBAL::BOOL::FALSE, Translate("Mix SMRTbell Beads"), 0);
    }
    MECC::TraceComment(Translate("Transfer beads to MIDI plate"));
    MECC::TraceComment(Translate("TO DO: Have this be a multi dispense using the 1000uL tips"));
    _TimeStamp(Translate("Transfer SRMTbell cleanup beads to deep well plate"), o_dialog);
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispense(ML_STAR, 0, ML_STAR.RGT_Beads, ML_STAR.MIDI_Pipette, t_fltM6MagBeads, Translate("PacBio_SVF_ProNexPurificationBeads_SurfaceEmpty"), 0, 2.0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Add beads to MIDI plate"), 0);
  }
  MECC::TraceComment(Translate("Have user add 3.1x AMPure DWP to deck"));
  if (t_blnActivateSizeSelectionDilutedAMPure == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltM7DilutedAmpure = ARW_LOADINGLIB::Define_VolumePerWell(Translate("3.1x AMPure PB"), 155.0);
    ARW_LOADINGLIB::Define_VolumePerWell_MastermixComponent(Translate("3.1x AMPure PB"), Translate("AMPure® PB"), 54.25);
    ARW_LOADINGLIB::Define_VolumePerWell_MastermixComponent(Translate("3.1x AMPure PB"), Translate("Elution buffer"), 100.75);
    if (t_intNumberOfSamples > 80)
    {
      ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("3.1x AMPure PB"), t_intNumberOfSamples, GlobalARW::LabwareType::DWP96_Plate, 800.0, 0.0, 0.0, 0.0, ML_STAR.RGT_Beads, t_intNumberOfSamples, t_arrVolumePerWellDilutedAmpure);
    }
    else
    {
      ARW_LOADINGLIB::Add_ReagentInTubes(ML_STAR, Translate("3.1x AMPure PB"), t_intNumberOfSamples, GlobalARW::LabwareType::DWP96_Plate, 800.0, 0.0, 0.0, 0.0, ML_STAR.MIDI_Pipette, t_intNumberOfSamples, t_arrVolumePerWellDilutedAmpure);
    }
    if (t_blnActivateSizeSelectionDilutedAMPure == ASWGLOBAL::BOOL::TRUE)
    {
      arrLabwarePositions.SetSize(0);
      arrLabwareQuantities.SetSize(0);
      arrLabwareDescriptions.SetSize(0);
      l_intAmpureBeadsForStockTube = 54.25 * t_intNumberOfSamples;
      l_intElutionBufferForStockTube = 100.75 * t_intNumberOfSamples;
      l_intAmpureBeadsForStockTube = l_intAmpureBeadsForStockTube * 1.1;
      l_intElutionBufferForStockTube = l_intElutionBufferForStockTube * 1.1;
      l_intTotalAmpureDilNeededForStockTube = l_intAmpureBeadsForStockTube + l_intElutionBufferForStockTube;
      l_strAmpureBeadsForStockTube = APPSLIB::StrConvertToString(l_intAmpureBeadsForStockTube);
      l_strAmpureBeadsForStockTube = APPSLIB::StringMid(l_strAmpureBeadsForStockTube, 1, 7);
      l_strElutionBufferForStockTube = APPSLIB::StrConvertToString(l_intElutionBufferForStockTube);
      l_strElutionBufferForStockTube = APPSLIB::StringMid(l_strElutionBufferForStockTube, 1, 7);
      arrLabwarePositions.AddAsLast(Translate("  35% v/v AMPure PB  "));
      l_strAmpureQuantity = StrConcat12(Translate(""), Translate("["), l_intTotalAmpureDilNeededForStockTube, Translate("µL] total volume in tube "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      arrLabwareQuantities.AddAsLast(l_strAmpureQuantity);
      l_strLabwareDescription = StrConcat12(Translate("1"), Translate(" x (Tube) "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      arrLabwareDescriptions.AddAsLast(l_strLabwareDescription);
      arrLabwarePositions.AddAsLast(Translate("  --- AMPure® PB"));
      l_strAmpureQuantity = StrConcat12(Translate(" -- "), l_strAmpureBeadsForStockTube, Translate("µL"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      arrLabwareQuantities.AddAsLast(l_strAmpureQuantity);
      arrLabwareDescriptions.AddAsLast(Translate(""));
      arrLabwarePositions.AddAsLast(Translate("  --- Elution buffer"));
      l_strEBQuantity = StrConcat12(Translate(" -- "), l_strElutionBufferForStockTube, Translate("µL"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      arrLabwareQuantities.AddAsLast(l_strEBQuantity);
      arrLabwareDescriptions.AddAsLast(Translate(""));
      i_arrColumnHeaders.SetSize(0);
      i_arrColumnHeaders.AddAsLast(Translate("Name"));
      i_arrColumnHeaders.AddAsLast(Translate("Volume (µL) per tube"));
      i_arrColumnHeaders.AddAsLast(Translate("Amount of tubes x Labware"));
      VectorCustomDialogs::LoadingDialogSetResources(i_arrColumnHeaders);
      t_strReturn = VectorCustomDialogs::LoadingDialog(Translate("35% v/v AMPure dilution calculation for 3.1X cleanup"), VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Prepare 35% v/v AMPure bead dilution according to instructions below. Click 'Ok' to continue."), Translate("Vortex and store bead solution at room temperature until prompted to plate. \nNote: Component volumes are adjusted for the number of samples being prepared, plus 10% overage."), Translate("C:\Program Files (x86)\HAMILTON\NGSStar\PacBio\Library Prep\Files\Pictures\MasterMix.png"), Translate(""), 300, arrLabwarePositions, arrLabwareQuantities, arrLabwareDescriptions);
    }
    ARW_LOADINGLIB::Evaluate_ResourcesByCarrier();
    ARW_LOADINGLIB::ARW_LoadingLib_START(ML_STAR, Translate("NGSStar"), t_strKitVendor, t_strKitName);
    ARW_LOADINGLIB::Add_Labware(ML_STAR, Translate("155µL per well"), Translate("Aliquoted 35% v/v diluted AMPure PB bead deep well plate"), 1, ML_STAR.MIDI_Pipette);
    _TimeStamp(Translate("User adds pre-aliquotted 3.1x diluted AMPure to deck"), o_dialog);
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    customDialog_11.InitCustomDialog("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");
    customDialog_11.ShowCustomDialog();
    ARW_LOADINGLIB::Load_Carrier(ML_STAR, GlobalARW::CarrierType::Carrier12, Translate("Carrier12.jpg"), Translate(""));
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    MECC::TraceComment(Translate("Shake MIDI Plate with Beads"));
    _TimeStamp(Translate("Move deep well plate to HHS to shake"), o_dialog);
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.HHS3_MIDI, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
    HAMILTONHEATERSHAKERCONTROL::ShakeStart(ML_STAR, 3, 1400);
    DATACONTROLLER::TIME_TimerStart(30, Translate("Resuspend 3.1x AMPure"), ASWGLOBAL::BOOL::TRUE, l_hdlBeadBindingMix);
    HAMILTONHEATERSHAKERCONTROL::StopShaker(ML_STAR, 3);
    MECC::TraceComment(Translate("Move MIDI Plate to Processing Location"));
    _TimeStamp(Translate("Move deep well plate to processing location"), o_dialog);
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HHS3_MIDI, ML_STAR.MIDI_Pipette, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
    MECC::TraceComment(Translate("Move HSP from stack to processing location\nFor Supernatant Removal "));
    _TimeStamp(Translate("Move new plate to processing location for saving supernatant"), o_dialog);
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.Stack_04, ML_STAR.HSP_Pipette2, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    APPSLIB::SequenceIncrement(ML_STAR.Stack_04, 1);
  }
  _TimeStamp(Translate("Transfer sample to deep well plate with 3.1x diluted AMPure beads"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_AspirateAll(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.MIDI_Pipette, t_fltM5SampleTransfer, Translate("PacBio_SVF_TransferSample_SurfaceEmpty_v3"), 0.5, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0, 0, 10, t_fltM5SampleTransfer, Translate("Addition of nuclease treatment output to MIDI plate"), 1, 1);
  MECC::TraceComment(Translate("Move MIDI to HHS3"));
  _TimeStamp(Translate("Move deep well plate to HHS to mix"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.HHS3_MIDI, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  HAMILTONHEATERSHAKERCONTROL::ShakeStart(ML_STAR, 3, 1400);
  DATACONTROLLER::TIME_TimerStart(30, Translate("30 sec bead binding mix"), ASWGLOBAL::BOOL::TRUE, l_hdlBeadBindingMix);
  HAMILTONHEATERSHAKERCONTROL::StopShaker(ML_STAR, 3);
  MECC::TraceComment(Translate("Room temp incubation"));
  _TimeStamp(Translate("Bead binding incubation"), o_dialog);
  if (t_blnActivateSizeSelectionDilutedAMPure == ASWGLOBAL::BOOL::TRUE)
  {
    DATACONTROLLER::TIME_TimerStart(1200, Translate("Initial bead binding incubation"), ASWGLOBAL::BOOL::TRUE, l_hdlCleanupBindingIncubation);
  }
  else
  {
    DATACONTROLLER::TIME_TimerStart(600, Translate("Initial bead binding incubation"), ASWGLOBAL::BOOL::TRUE, l_hdlCleanupBindingIncubation);
  }
  MECC::TraceComment(Translate("Move MIDI to magnet"));
  _TimeStamp(Translate("Move sample deep well plate to magnet"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HHS3_MIDI, ML_STAR.MIDI_OnMagnet, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("Magnet settle timer"));
  _TimeStamp(Translate("Magnet settle timer"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(300, Translate("Magnet settle timer"), ASWGLOBAL::BOOL::TRUE, l_hdlMagnetSettleTimer);
  MECC::TraceComment(Translate("Remove Supernatant"));
  if (t_blnActivateSizeSelectionDilutedAMPure == ASWGLOBAL::BOOL::TRUE)
  {
    _TimeStamp(Translate("Remove supernatant and save"), o_dialog);
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_RemoveAndSaveSupernatant(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.HSP_Pipette2, Translate("PacBio_SVF_SupernatantRemovalFirst_JetEmpty"), Translate("PacBio_SVF_SupernatantRemovalSecond_JetEmpty"), 210.0, 58.0, Translate("Remove supernatant"));
  }
  else
  {
    _TimeStamp(Translate("Remove supernatant"), o_dialog);
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_RemoveAndSaveSupernatant(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste_MPH, Translate("PacBio_SVF_SupernatantRemovalFirst_JetEmpty"), Translate("PacBio_SVF_SupernatantRemovalSecond_JetEmpty"), 210.0, 58.0, Translate("Remove supernatant"));
  }
  MECC::TraceComment(Translate("Ethanol Washes (2x)"));
  _TimeStamp(Translate("80% ethanol wash 1"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_EthanolWashV2(ML_STAR, ML_STAR.RGT_Ethanol, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste_MPH, 200.0, 200.0, 58.0, Translate("PacBio_SVFMPH_EthanolWash_SurfaceEmpty"), Translate("PacBio_SVF_SupernatantRemovalFirst_JetEmpty"), Translate("PacBio_SVF_SupernatantRemovalSecond_JetEmpty"), Translate("Ethanol Wash"));
  _TimeStamp(Translate("80% ethanol wash 2"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_EthanolWashV2(ML_STAR, ML_STAR.RGT_Ethanol, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste_MPH, 200.0, 200.0, 58.0, Translate("PacBio_SVFMPH_EthanolWash_SurfaceEmpty"), Translate("PacBio_SVF_SupernatantRemovalFirst_JetEmpty"), Translate("PacBio_SVF_SupernatantRemovalSecond_JetEmpty"), Translate("Ethanol Wash"));
  _TimeStamp(Translate("Bead drying"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(60, Translate("Ethanol Drying"), ASWGLOBAL::BOOL::FALSE, l_EthanolDryTimer);
  MECC::TraceComment(Translate("Throw away HSP on processing location\ndo this during bead drying"));
  _TimeStamp(Translate("Move plate to waste"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_Waste, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  DATACONTROLLER::TIME_WaitForTimer(l_EthanolDryTimer);
  MECC::TraceComment(Translate("Move MIDI to MIDI_Pipette"));
  _TimeStamp(Translate("Move sample deep well plate to processing location"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Pipette, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  MECC::TraceComment(Translate("Transfer elution buffer to MIDI plate"));
  _TimeStamp(Translate("Transfer Elution buffer to sample deep well plate"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispenseLowElution(ML_STAR, 2, ML_STAR.RGT_ElutionBuffer, ML_STAR.MIDI_Pipette, t_fltM5ElutionBuffer, Translate("PacBio_50F_ElutionBuffer_JetEmpty_v2"), 0, 2.0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Transfer elution buffer to Deep Well MIDI Plate"), 0);
  MECC::TraceComment(Translate("Move MIDI to HHS3"));
  _TimeStamp(Translate("Move sample deep well plate to HHS to mix"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.HHS3_MIDI, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  HAMILTONHEATERSHAKERCONTROL::ShakeStart(ML_STAR, 3, 1400);
  DATACONTROLLER::TIME_TimerStart(30, Translate("Elution shake"), ASWGLOBAL::BOOL::TRUE, l_hdlElutionIncubation);
  HAMILTONHEATERSHAKERCONTROL::StopShaker(ML_STAR, 3);
  MECC::TraceComment(Translate("Elution Incubation"));
  _TimeStamp(Translate("Elution incubation"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(300, Translate("Elution incubation"), ASWGLOBAL::BOOL::TRUE, l_hdlElutionIncubation);
  MECC::TraceComment(Translate("Move MIDI to magnet"));
  _TimeStamp(Translate("Move sample deep well plate to magnet"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HHS3_MIDI, ML_STAR.MIDI_OnMagnet, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  MECC::TraceComment(Translate("Magnet settle timer"));
  _TimeStamp(Translate("Magnet settling timer"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(180, Translate("Magnet settle timer"), ASWGLOBAL::BOOL::FALSE, l_hdlMagnetSettleTimer);
  MECC::TraceComment(Translate("Move HSP from stack to processing location"));
  _TimeStamp(Translate("Move new plate from stack"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.Stack_04, ML_STAR.HSP_Pipette, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  APPSLIB::SequenceIncrement(ML_STAR.Stack_04, 1);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_CleanUpTipAdapter(ML_STAR);
  DATACONTROLLER::TIME_WaitForTimer(l_hdlMagnetSettleTimer);
  MECC::TraceComment(Translate("Transfer eluent to HSP plate"));
  _TimeStamp(Translate("Transfer sample to new plate"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_SingleDispense(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.HSP_Pipette, t_fltM5ElutionBufferTransfer, Translate("PacBio_50F_96MPH_Eluent_FinalTransfer_SurfaceEmpty"), 0.1, 2.0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, 0, 0, 0, 0, Translate("Eluent Transfer"), 1);
  MECC::TraceComment(Translate("Clean Up Tip Adapter"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_CleanUpTipAdapter(ML_STAR);
  _TimeStamp(Translate("Display sample plate location"), o_dialog);
  if (t_blnActivateSizeSelectionDilutedAMPure == ASWGLOBAL::BOOL::TRUE)
  {
    customDialog_13.InitCustomDialog("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");
    customDialog_13.ShowCustomDialog();
  }
  else
  {
    customDialog_12.InitCustomDialog("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");
    customDialog_12.ShowCustomDialog();
  }
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function M2_PostShearCleanUp(  ) void {
  private timer l_hdlCleanupBindingIncubation;
  private timer l_hdlMagnetSettleTimer;
  private timer l_hdlElutionIncubation;
  private timer l_EthanolDryTimer;
  private variable l_fltM1MixVolume;
  private variable l_intTotalVolume;
  private dialog customDialog_14;
  private dialog customDialog_15;
  private variable o_dialog;
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  MECC::TraceComment(Translate("Mix Beads"));
  _TimeStamp(Translate("Mix SMRTbell beads in reservoir"), o_dialog);
  if (t_intNumberOfSamples > 48)
  {
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MixLiquid(ML_STAR, 5, ML_STAR.RGT_Beads, 0, 3000, 3, 0, 1000, 3000, 10);
  }
  else
  {
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispense(ML_STAR, 0, ML_STAR.RGT_Beads, ML_STAR.RGT_Beads, 0.0, Translate("PacBio_HighVolume_PurificationBeadsMix_SurfaceEmpty"), 1.0, 2.0, 0, 0, 20, 1000.0, ASWGLOBAL::BOOL::FALSE, Translate("Mix SMRTbell Beads"), 0);
  }
  MECC::TraceComment(Translate("Add beads to Deep Well MIDI plate"));
  _TimeStamp(Translate("Transfer SMRTbell beads to sample deep well plate"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispense(ML_STAR, 2, ML_STAR.RGT_Beads, ML_STAR.MIDI_Pipette, t_fltSMRTbellBeadsVolumePostShear, Translate("PacBio_SVF_ProNexPurificationBeads_SurfaceEmpty_Prewet"), 0, 0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Add beads to Deep Well MIDI plate"), 0);
  _TimeStamp(Translate("Mix plate"), o_dialog);
  l_intTotalVolume = t_fltSMRTbellBeadsVolumePostShear + t_fltSMRTbellBeadsVolumePostShear;
  l_fltM1MixVolume = l_intTotalVolume * 0.8;
  if (l_fltM1MixVolume > 1000)
  {
    l_fltM1MixVolume = 1000;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(" ------------- l_fltM1MixVolume:"), l_fltM1MixVolume);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_MixPlateV3(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_Pipette, Translate("PacBio_HighVolume_PurificationBeadsMix_SurfaceEmptyV2"), 0, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 20, l_fltM1MixVolume, Translate("Mix beads + sample"), 1);
  MECC::TraceComment(Translate("Bead binding incubation"));
  _TimeStamp(Translate("Bead binding incubation"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(600, Translate("Initial bead binding incubation"), ASWGLOBAL::BOOL::FALSE, l_hdlCleanupBindingIncubation);
  _TimeStamp(Translate("Transfer Elution buffer to stamp plate"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MultiDispense_V2(ML_STAR, ML_STAR.RGT_ElutionBuffer, ML_STAR.HSP_Pipette, Translate("PacBio_SVF_EB_MultiDispense_JetPart"), t_fltM1PostShearElutionBuffer, t_fltM1PostShearElutionBuffer, t_fltM1PostShearElutionBuffer, 4.0, Translate("Multi dispense Elution Buffer for stamp"), 0);
  _TimeStamp(Translate("Wait for bead binding incubation"), o_dialog);
  DATACONTROLLER::TIME_WaitForTimer(l_hdlCleanupBindingIncubation);
  MECC::TraceComment(Translate("Move MIDI to magnet"));
  _TimeStamp(Translate("Move deep well sample plate to magnet"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_OnMagnet, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("Magnet settle timer"));
  _TimeStamp(Translate("Magnet settle timer"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(300, Translate("Magnet settle timer"), ASWGLOBAL::BOOL::TRUE, l_hdlMagnetSettleTimer);
  _TimeStamp(Translate("Additional mix on magnetic plate"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_MixPlateV3(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_OnMagnet, Translate("PacBio_HighVolume_PurificationBeadsMix_SurfaceEmptyV2"), 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 6, l_fltM1MixVolume, Translate("Additional Mix on magnet plate"), 1);
  _TimeStamp(Translate("Wait for additional bead binding incubation"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(180, Translate("Additional bead binding incubation"), ASWGLOBAL::BOOL::TRUE, l_hdlCleanupBindingIncubation);
  _TimeStamp(Translate("Remove supernatant"), o_dialog);
  ML_STAR.LiquidWaste_MPH.SetCount(t_intNumberOfSamples);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_SingleDispense(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste_MPH, t_fltM1FirstSupernatantRemoval, Translate("PacBio_HighVolume_SupernatantRemovalSecond_JetEmpty"), 0, 10, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, 0, 0, 0, 0, Translate("Remove Supernatant"), 1);
  ML_STAR.LiquidWaste_MPH.SetCount(96);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_RemoveSupernatant(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste_MPH, Translate("PacBio_SVF_SupernatantRemovalFirst_JetEmpty"), Translate("PacBio_SVF_SupernatantRemovalSecond_JetEmpty"), 270.0, 30.0, Translate("Remove supernatant"));
  MECC::TraceComment(Translate("Ethanol wash\n(1x) for better recovery"));
  _TimeStamp(Translate("80% ethanol wash"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_EthanolWashV2(ML_STAR, ML_STAR.RGT_Ethanol, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste_MPH, 200.0, 200.0, 58.0, Translate("PacBio_SVFMPH_EthanolWash_SurfaceEmpty"), Translate("PacBio_SVF_SupernatantRemovalFirst_JetEmpty"), Translate("PacBio_SVF_SupernatantRemovalSecond_JetEmpty"), Translate("Ethanol Wash"));
  _TimeStamp(Translate("Bead drying"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(60, Translate("EtOH Drying"), ASWGLOBAL::BOOL::TRUE, l_EthanolDryTimer);
  MECC::TraceComment(Translate("Move MIDI off magnet"));
  _TimeStamp(Translate("Move sample deep well plate off magnet"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Pipette, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  MECC::TraceComment(Translate("Transfer Elution Buffer to MIDI plate"));
  _TimeStamp(Translate("Transfer Elution buffer from stamp plate to sample plate"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_AspirateAllForStamp(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.MIDI_Pipette, t_fltM1PostShearElutionBufferTransfer, Translate("PacBio_SVF_EB_SingleDispense_JetEmpty"), 0.1, 2.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0, 0, 0, 0, Translate("stamp"), 0, 0.5);
  MECC::TraceComment(Translate("Move MIDI to HHS to shake"));
  _TimeStamp(Translate("Move sample deep well plate to HHS to mix"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.HHS3_MIDI, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  HAMILTONHEATERSHAKERCONTROL::ShakeStart(ML_STAR, 3, 1400);
  DATACONTROLLER::TIME_TimerStart(30, Translate("Elution + Beads Mix"), ASWGLOBAL::BOOL::TRUE, l_hdlElutionIncubation);
  HAMILTONHEATERSHAKERCONTROL::StopShaker(ML_STAR, 3);
  MECC::TraceComment(Translate("Elution incubation"));
  _TimeStamp(Translate("Elution incubation"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(300, Translate("Post Shear Cleanup Elution incubation"), ASWGLOBAL::BOOL::FALSE, l_hdlElutionIncubation);
  _TimeStamp(Translate("Move Elution buffer stamp plate to waste"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_Waste, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  _TimeStamp(Translate("Move new plate from stack to processing location"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.Stack_04, ML_STAR.HSP_Pipette, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  APPSLIB::SequenceIncrement(ML_STAR.Stack_04, 1);
  _TimeStamp(Translate("Wait for elution incubation"), o_dialog);
  DATACONTROLLER::TIME_WaitForTimer(l_hdlElutionIncubation);
  MECC::TraceComment(Translate("Move MIDI to magnet"));
  _TimeStamp(Translate("Move sample deep well plate to magnet"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HHS3_MIDI, ML_STAR.MIDI_OnMagnet, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("Magnet settle timer"));
  _TimeStamp(Translate("Magnet settle timer"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(200, Translate("Magnet settle timer"), ASWGLOBAL::BOOL::FALSE, l_hdlMagnetSettleTimer);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_CleanUpTipAdapter(ML_STAR);
  DATACONTROLLER::TIME_WaitForTimer(l_hdlMagnetSettleTimer);
  MECC::TraceComment(Translate("Transfer eluent to HSP"));
  _TimeStamp(Translate("Transfer sample to new plate"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_AspirateAll(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.HSP_Pipette, 50.0, Translate("PacBio_SVF_MPH_LowTEElutionBuffer_SingleDispense_JetEmpty"), 0.3, 2.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0, 0, 0, 0, Translate("Transfer eluate"), 1, 0.3);
  MECC::TraceComment(Translate("Move MIDI to waste"));
  _TimeStamp(Translate("Move deep well plate off magnet to waste"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_CleanUpTipAdapter(ML_STAR);
  if (t_blnQCPausesActivated == ASWGLOBAL::BOOL::TRUE)
  {
    _TimeStamp(Translate("Method paused for QC"), o_dialog);
    customDialog_14.InitCustomDialog("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");
    customDialog_14.ShowCustomDialog();
  }
  if (t_intSelectedIndexSTOP == 3)
  {
    customDialog_15.InitCustomDialog("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");
    customDialog_15.ShowCustomDialog();
  }
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function M1_Shearing(  ) void {
  private dialog customDialog_16;
  private variable o_dialog;
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  MECC::TraceComment(Translate("Shear Plate"));
  _TimeStamp(Translate("Shear plate"), o_dialog);
  if (t_blnShearWithChannelsOnly == ASWGLOBAL::BOOL::TRUE)
  {
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_ShearPlate(ML_STAR, 0, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_Pipette, 0, t_strShearingLC, 0, 0, 99, t_fltShearingMixVolume, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("channel shearing"), 1);
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_ShearPlate(ML_STAR, 0, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_Pipette, 0, t_strShearingLC, 0, 0, 99, t_fltShearingMixVolume, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("channel shearing"), 1);
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_ShearPlate(ML_STAR, 0, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_Pipette, 0, t_strShearingLC, 0, 0, 99, t_fltShearingMixVolume, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("channel shearing"), 1);
  }
  else
  {
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_ShearPlateV2(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_Pipette, 0.0, t_strShearingLC, 0, 0.1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 60, t_fltShearingMixVolume, 0, 0, Translate("Shear plate"), 1, 5);
  }
  MECC::TraceComment(Translate("Cleanup Tip Adapter"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_CleanUpTipAdapter(ML_STAR);
  if (t_intSelectedIndexSTOP == 2)
  {
    customDialog_16.InitCustomDialog("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");
    customDialog_16.ShowCustomDialog();
  }
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function PreModule_SRE(  ) void {
  private timer l_hdlSREIncubation;
  private timer l_hdlSREElutionIncubation;
  private dialog customDialog_17;
  private dialog customDialog_18;
  private dialog customDialog_19;
  private timer l_hdlSREMix;
  private timer l_hdlEluateMix;
  private dialog customDialog_20;
  private dialog customDialog_21;
  private variable l_SREElutionMixVolume;
  private dialog customDialog_22;
  private dialog customDialog_23;
  private dialog customDialog_24;
  private variable o_dialog;
  //START
  _DATA_TraceStartEnd(GetFunctionName(),1);
  _TimeStamp(Translate("Start heat block 50C"), o_dialog);
  HAMILTONHEATERSHAKERCONTROL::StartTemperatureControl(ML_STAR, 2, 50.0, ASWGLOBAL::BOOL::FALSE);
  _TimeStamp(Translate("Transfer Buffer SRE to stamp plate"), o_dialog);
  if (t_intNumberOfSamples <= 24)
  {
    ML_STAR.HSP_Pipette2.SetCount(t_intNumberOfSamples);
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MultiDsp_OneChannel(ML_STAR, ML_STAR.RGT_SRE_T1, ML_STAR.HSP_Pipette2, Translate("TruSightOncology500HT_HVF_SPB_Aliquot_JetPart"), t_fltSREBuffer, t_fltSREBuffer, t_fltSREBuffer, 2.0, Translate("Multi dispense SRE buffer for stamp"));
  }
  else
  {
    if (t_intNumberOfSamples <= 48)
    {
      ML_STAR.HSP_Pipette2.SetCount(24);
      STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MultiDsp_OneChannel(ML_STAR, ML_STAR.RGT_SRE_T1, ML_STAR.HSP_Pipette2, Translate("TruSightOncology500HT_HVF_SPB_Aliquot_JetPart"), t_fltSREBuffer, t_fltSREBuffer, t_fltSREBuffer, 2.0, Translate("Multi dispense SRE buffer for stamp"));
      ML_STAR.HSP_Pipette2.SetCount(t_intNumberOfSamples);
      ML_STAR.HSP_Pipette2.SetCurrentPosition(25);
      STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MultiDsp_OneChannel(ML_STAR, ML_STAR.RGT_SRE_T2, ML_STAR.HSP_Pipette2, Translate("TruSightOncology500HT_HVF_SPB_Aliquot_JetPart"), t_fltSREBuffer, t_fltSREBuffer, t_fltSREBuffer, 2.0, Translate("Multi dispense SRE buffer for stamp"));
    }
    else
    {
      if (t_intNumberOfSamples <= 72)
      {
        ML_STAR.HSP_Pipette2.SetCount(24);
        STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MultiDsp_OneChannel(ML_STAR, ML_STAR.RGT_SRE_T1, ML_STAR.HSP_Pipette2, Translate("TruSightOncology500HT_HVF_SPB_Aliquot_JetPart"), t_fltSREBuffer, t_fltSREBuffer, t_fltSREBuffer, 2.0, Translate("Multi dispense SRE buffer for stamp"));
        ML_STAR.HSP_Pipette2.SetCount(48);
        ML_STAR.HSP_Pipette2.SetCurrentPosition(25);
        STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MultiDsp_OneChannel(ML_STAR, ML_STAR.RGT_SRE_T2, ML_STAR.HSP_Pipette2, Translate("TruSightOncology500HT_HVF_SPB_Aliquot_JetPart"), t_fltSREBuffer, t_fltSREBuffer, t_fltSREBuffer, 2.0, Translate("Multi dispense SRE buffer for stamp"));
        ML_STAR.HSP_Pipette2.SetCount(t_intNumberOfSamples);
        ML_STAR.HSP_Pipette2.SetCurrentPosition(49);
        STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MultiDsp_OneChannel(ML_STAR, ML_STAR.RGT_SRE_T3, ML_STAR.HSP_Pipette2, Translate("TruSightOncology500HT_HVF_SPB_Aliquot_JetPart"), t_fltSREBuffer, t_fltSREBuffer, t_fltSREBuffer, 2.0, Translate("Multi dispense SRE buffer for stamp"));
      }
      else
      {
        ML_STAR.HSP_Pipette2.SetCount(24);
        STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MultiDsp_OneChannel(ML_STAR, ML_STAR.RGT_SRE_T1, ML_STAR.HSP_Pipette2, Translate("TruSightOncology500HT_HVF_SPB_Aliquot_JetPart"), t_fltSREBuffer, t_fltSREBuffer, t_fltSREBuffer, 2.0, Translate("Multi dispense SRE buffer for stamp"));
        ML_STAR.HSP_Pipette2.SetCount(48);
        ML_STAR.HSP_Pipette2.SetCurrentPosition(25);
        STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MultiDsp_OneChannel(ML_STAR, ML_STAR.RGT_SRE_T2, ML_STAR.HSP_Pipette2, Translate("TruSightOncology500HT_HVF_SPB_Aliquot_JetPart"), t_fltSREBuffer, t_fltSREBuffer, t_fltSREBuffer, 2.0, Translate("Multi dispense SRE buffer for stamp"));
        ML_STAR.HSP_Pipette2.SetCount(72);
        ML_STAR.HSP_Pipette2.SetCurrentPosition(49);
        STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MultiDsp_OneChannel(ML_STAR, ML_STAR.RGT_SRE_T3, ML_STAR.HSP_Pipette2, Translate("TruSightOncology500HT_HVF_SPB_Aliquot_JetPart"), t_fltSREBuffer, t_fltSREBuffer, t_fltSREBuffer, 2.0, Translate("Multi dispense SRE buffer for stamp"));
        ML_STAR.HSP_Pipette2.SetCount(t_intNumberOfSamples);
        ML_STAR.HSP_Pipette2.SetCurrentPosition(73);
        STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MultiDsp_OneChannel(ML_STAR, ML_STAR.RGT_SRE_T4, ML_STAR.HSP_Pipette2, Translate("TruSightOncology500HT_HVF_SPB_Aliquot_JetPart"), t_fltSREBuffer, t_fltSREBuffer, t_fltSREBuffer, 2.0, Translate("Multi dispense SRE buffer for stamp"));
      }
    }
  }
  ML_STAR.HSP_Pipette2.SetCurrentPosition(1);
  ML_STAR.HSP_Pipette2.SetCount(t_intNumberOfSamples);
  _TimeStamp(Translate("Transfer Buffer SRE to sample plate and mix"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_AspirateAllForStamp(ML_STAR, ML_STAR.HSP_Pipette2, ML_STAR.HSP_Pipette, t_fltSREBufferTransfer, Translate("HMWSRE_SVF_BufferSRE_DispenseJet_Empty_v4"), 0.1, 4.0, ASWGLOBAL::BOOL::OFF, ASWGLOBAL::BOOL::TRUE, 0, 0, 15, t_intSREMixVolume, Translate("Stamp Buffer SRE into sample plate and mix"), 0, 0.3);
  _TimeStamp(Translate("Seal sample plate"), o_dialog);
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  customDialog_19.InitCustomDialog("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");
  customDialog_19.ShowCustomDialog();
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  _TimeStamp(Translate("Move sample plate to HHS to mix"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HHS3_HSP, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  HAMILTONHEATERSHAKERCONTROL::ShakeStart(ML_STAR, 3, 1400);
  DATACONTROLLER::TIME_TimerStart(60, Translate("Mix by shaking"), ASWGLOBAL::BOOL::TRUE, l_hdlSREMix);
  HAMILTONHEATERSHAKERCONTROL::StopShaker(ML_STAR, 3);
  HAMILTONHEATERSHAKERCONTROL::WaitForTemperatureControl(2, 50.0, 20);
  _TimeStamp(Translate("Move sample plate to HHS 2"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HHS3_HSP, ML_STAR.HHS2_HSP, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("Implement plate tap with teaching needles\n\ncontact the edges of a plate if present"));
  _TimeStamp(Translate("Check plate moved"), o_dialog);
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  t_blnPlateExists = STAR_CHANNEL_TOOLS::MOVE_CheckPlateWithTwoChannels(ML_STAR, 8, ML_STAR.HHS2_HSP, 75.0);
  if (t_blnPlateExists == ASWGLOBAL::BOOL::FALSE)
  {
    customDialog_21.InitCustomDialog("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");
    customDialog_21.ShowCustomDialog();
    t_blnPlateExists = STAR_CHANNEL_TOOLS::MOVE_CheckPlateWithTwoChannels(ML_STAR, 8, ML_STAR.HHS1_HSP, 76.0);
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  else
  {
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  _TimeStamp(Translate("Start incubation"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(3600, Translate("Incubate"), ASWGLOBAL::BOOL::FALSE, l_hdlSREIncubation);
  _TimeStamp(Translate("Move Buffer SRE stamp plate to waste"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HSP_Pipette2, ML_STAR.HSP_Waste, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  DATACONTROLLER::TIME_WaitForTimer(l_hdlSREIncubation);
  _TimeStamp(Translate("Move sample plate to processing location"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HHS2_HSP, ML_STAR.HSP_Pipette, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  _TimeStamp(Translate("Remove seal on sample plate"), o_dialog);
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  customDialog_18.InitCustomDialog("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");
  customDialog_18.ShowCustomDialog();
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  _TimeStamp(Translate("Transfer sample to deep well plate"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_AspirateAll(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.MIDI_Pipette, t_fltSREReaction, Translate("HMWSRE_SVF_SupernatantRemoval_JetEmpty_v2"), 2.0, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0, 0, 0, 0, Translate("Transfer to Deep Well Plate"), 1, 0.2);
  _TimeStamp(Translate("Move supernatant plate from stack to processing location"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.Stack_04, ML_STAR.HSP_Pipette2, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  APPSLIB::SequenceIncrement(ML_STAR.Stack_04, 1);
  _TimeStamp(Translate("Centrifugation"), o_dialog);
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  t_strCentrifugationDialog = Translate("");
  t_strCentrifugationTime = StrIStr(t_intCentrifugationTime);
  t_strCentrifugationDialog = "Remove the deep well plate from plate carrier position 3. Seal with an adhesive seal.\n\nCentrifuge at >= 2250 rcf (max 3220 rcf) for 60 mins with cooling function off or set at 29°C.\n\nAfter centrifugation, immediately retrieve plate, carefully remove seal and return plate to plate carrier position 3 with A1 in the top left corner.";
  customDialog_17.InitCustomDialog("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");
  customDialog_17.SetCustomDialogProperty( "textBlock2.Text", t_strCentrifugationDialog );
  customDialog_17.ShowCustomDialog();
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  _TimeStamp(Translate("Remove supernatant and save"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_AspirateAll(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.HSP_Pipette2, t_fltSREReaction, Translate("HMWSRE_SVF_SupernatantRemovalAndSave_JetEmpty_v2"), t_intSupRemovalHeightMM, 2.0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, 0, 0, 0, 0, Translate("Remove supernatant and save"), 1, 0.05);
  _TimeStamp(Translate("Transfer buffer LTE"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_SingleDispense_pLLD(ML_STAR, 0, ML_STAR.RGT_M1ElutionBuffer, ML_STAR.MIDI_Pipette, t_fltSREEluate, Translate("HMWSRE_SVF_BufferElution_Jet"), 0, 5.0, 0, 0, 0, 0, ASWGLOBAL::BOOL::FALSE, Translate("Transfer LTE"), 0);
  _TimeStamp(Translate("Elution incubation"), o_dialog);
  DATACONTROLLER::TIME_TimerStart(600, Translate("SRE Elution incubation"), ASWGLOBAL::BOOL::TRUE, l_hdlSREElutionIncubation);
  _TimeStamp(Translate("Mix plate"), o_dialog);
  l_SREElutionMixVolume = 0.0;
  l_SREElutionMixVolume = t_fltSREEluate * 0.8;
  if (l_SREElutionMixVolume > 1000)
  {
    l_SREElutionMixVolume = 1000;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(" ------------- l_SREElutionMixVolume:"), l_SREElutionMixVolume);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_MPH_MixPlateV4(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_Pipette, Translate("HMWSRE_SVF_BufferElution_JetPart_v2"), 0, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 50, l_SREElutionMixVolume, Translate("Mix plate"), 1, 2);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("SRE eluate mix amount: "), Translate(" 100"));
  _TimeStamp(Translate("Move sample plate to HHS to mix"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.HHS3_MIDI, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  HAMILTONHEATERSHAKERCONTROL::ShakeStart(ML_STAR, 3, 1400);
  DATACONTROLLER::TIME_TimerStart(60, Translate("Mix by shaking"), ASWGLOBAL::BOOL::TRUE, l_hdlEluateMix);
  HAMILTONHEATERSHAKERCONTROL::StopShaker(ML_STAR, 3);
  _TimeStamp(Translate("Move sample plate to processing location"), o_dialog);
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.HHS3_MIDI, ML_STAR.MIDI_Pipette, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  HAMILTONHEATERSHAKERCONTROL::StopTemperatureControl(ML_STAR, 2);
  MECC::TraceComment(Translate("Clean Up Tip Adapter"));
  STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::PIP_CleanUpTipAdapter(ML_STAR);
  MECC::TraceComment(Translate("Remove supernatant plate off deck manually"));
  _TimeStamp(Translate("User remove supernatant plate"), o_dialog);
  customDialog_20.InitCustomDialog("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");
  customDialog_20.ShowCustomDialog();
  if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    _TimeStamp(Translate("Move SMRTbell adapter plate from stack to processing location"), o_dialog);
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TRP_GripperPaddles(ML_STAR, ML_STAR.Stack_03_0001, ML_STAR.HSP_Pipette2, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  if (t_blnQCPausesActivated == ASWGLOBAL::BOOL::TRUE)
  {
    _TimeStamp(Translate("Method paused for QC"), o_dialog);
    customDialog_22.InitCustomDialog("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");
    customDialog_22.ShowCustomDialog();
  }
  MECC::TraceComment(Translate("Display if end of run. sample plate position"));
  if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    _TimeStamp(Translate("Sample plate location"), o_dialog);
    customDialog_23.InitCustomDialog("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");
    customDialog_23.ShowCustomDialog();
  }
  else
  {
    _TimeStamp(Translate("Sample plate location"), o_dialog);
    customDialog_24.InitCustomDialog("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");
    customDialog_24.ShowCustomDialog();
  }
  //COMPLETE
  _DATA_TraceStartEnd(GetFunctionName(),0);
}

private function _TimeStamp( variable str_DialogStep, variable & str_DialogStepTimeStamp ) void {
  private variable l_strMinute;
  private variable l_strHour;
  str_DialogStepTimeStamp = 0;
  l_strHour = TimGetFormattedTime(Translate("%I"));
  l_strMinute = TimGetFormattedTime(Translate("%M%p"));
  str_DialogStepTimeStamp = StrConcat8(Translate("["), l_strHour, Translate(":"), l_strMinute, Translate("] "), str_DialogStep, Translate(""), Translate(""));
  Trace("%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%");
  Trace(str_DialogStepTimeStamp);
  Trace("%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%");
  VectorCustomDialogs::AppendStatusText(str_DialogStepTimeStamp);
}
