 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "VectorCustomDialogs\\VectorCustomDialogs.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\PacBio\\Library Prep\\Libraries\\ARW Loading\\ARW_LoadingLib.hs_" }
 namespace _Method { #include "Device Sub-method Libraries\\Inheco\\ODTC\\Advanced\\Submethod\\Inheco_ODTCControl_Advanced_v1.0.2.hs_" }
 namespace _Method { #include "Device Sub-method Libraries\\Inheco\\CPAC\\Slim\\V0.1\\CPACController.hs_" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLAppsLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\PacBio\\Library Prep\\Libraries\\Pipetting Controller\\STAR VOV Generic Framework v0.2.1.hs_" }
 namespace _Method { #include "Device Sub-method Libraries\\Hamilton\\HamiltonHeaterShaker\\Advanced\\1_0\\Sub-method Library\\HamiltonHeaterShakerControl.hs_" }
 namespace _Method { #include "ARW Libraries\\DataController\\DataController.hs_" }
 namespace _Method { #include "Stack_Reducer\\StackReducer.hs_" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\PacBio\\Library Prep\\Libraries\\ARW Loading\\ARW_Global.hsl" }
 namespace _Method { #include "HSLFileDirectoryLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "InhecoMTEC\\HSLMTecLib.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Channel Tools.hs_" }
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\PacBio\\Library Prep\\Methods\\PacBio_MultiPlexLibraryPrepDeck_v1.2.res"
variable t_strKitName;
variable t_blnSkipPipetting;
variable t_blnEnforceStepSelection;
variable t_blnSkipCarrierLoad;
variable t_strTime;
variable t_blnTestTimers;
variable t_strDate;
variable t_strKitVendor;
variable t_blnSkipCarrierUnload;
variable t_strMappingFileName;
variable t_strMappingFileDirectory;
variable t_strSerialNumberMLStar;
variable t_blnSimulationMode;
variable t_arrBlnProcessActivation[];
variable t_arrShutdownList[];
variable t_blnReturn;
variable t_intSelectedIndexSTOP;
variable t_intSelectedIndexSTART;
variable t_intNumberOfSamples;
variable t_blnODTCused;
variable t_fltM1EndRepairDDRATailingMix;
variable t_fltM2AdapterLigationMix;
variable t_strMappingFilePath;
variable t_blnUseTipAdapter;
variable t_fltM2Adapters;
variable t_blnUseMPHForAdapterTransfer;
variable t_strUserId;
variable t_strAdapterColStatus;
variable t_strUserIdStatus;
variable t_strSampleInputStatus;
variable t_intAdapterColumnStart;
variable t_strInputSampleVolume;
variable t_strAdapterColumnStart;
variable t_intInputSampleVolume;
variable t_fltM1InitialSupernatantRemovalVolume;
variable t_fltM1PostShearElutionBuffer;
variable t_fltM1PostShearMagBeads;
variable t_fltM1PostShearEtOHWash;
variable t_fltM1PostShearElutionBufferTransfer;
variable t_fltM1InputSampleVolume;
variable t_fltM1FirstSupernatantRemoval;
variable retValueReviewSelctions;
variable l_intAdapterColumnStartForDialog;
variable t_strFinalCleanup;
variable l_strSTARTtext;
variable l_strENDtext;
variable t_blnPlateExists;
variable t_blnSkipNeedlePlateTap;
variable t_arrVolumesToPool[];
variable t_fltEDTA;
variable t_fltEDTAStamp;
variable t_fltLigationPoolingVolume;
dialog customDialog_1;
variable t_blnShearWithChannelsOnly;
global device ML_STAR ("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\PacBio\\Library Prep\\Methods\\PacBio_MultiPlexLibraryPrepDeck_v1.2.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "templates\\HSLPipetteWizard.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method { #include "HSLSchedCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ARW_LOADINGLIB::_InitLibrary();
    INHECO_ODTCCONTROL_ADVANCED_V1_0_2::_InitLibrary();
    CPACCONTROLLER::_InitLibrary();
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::_InitLibrary();
    HAMILTONHEATERSHAKERCONTROL::_InitLibrary();
    DATACONTROLLER::_InitLibrary();
    STACKREDUCER::_InitLibrary();
    STAR_CHANNEL_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    t_blnUseTipAdapter = ASWGLOBAL::BOOL::TRUE;
    t_blnShearWithChannelsOnly = ASWGLOBAL::BOOL::FALSE;
    t_blnSkipCarrierLoad = ASWGLOBAL::BOOL::TRUE;
    t_blnSkipCarrierUnload = ASWGLOBAL::BOOL::TRUE;
    t_blnTestTimers = ASWGLOBAL::BOOL::FALSE;
    t_blnSkipPipetting = ASWGLOBAL::BOOL::FALSE;
    t_blnSkipNeedlePlateTap = ASWGLOBAL::BOOL::FALSE;
    t_blnEnforceStepSelection = ASWGLOBAL::BOOL::FALSE;
    t_blnODTCused = ASWGLOBAL::BOOL::FALSE;
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
    t_strKitVendor = Translate("PacBio");
    t_strKitName = Translate("Library Prep");
    t_strDate = TimGetFormattedDate(Translate(""));
    t_strTime = TimGetFormattedTime(Translate("%H%M%S"));
    t_strMappingFileName = StrConcat8(t_strDate, Translate("_"), t_strTime, Translate("_"), t_strKitName, Translate("MappingFile"), Translate(".xls"), Translate(""));
    t_strMappingFileDirectory = Translate("C:\\Program Files (x86)\\HAMILTON\\LogFiles\\NGSStar\\PacBio\\");
    t_strMappingFilePath = StrConcat4(t_strMappingFileDirectory, t_strMappingFileName, Translate(""), Translate(""));
    t_blnReturn = HSLExtensions::Directory::Exists(t_strMappingFileDirectory);
    if (t_blnReturn == ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      t_blnReturn = HSLExtensions::Directory::Create(t_strMappingFileDirectory);
    }
    VectorCustomDialogs::InitializeWithIconSetDirectoryAndCustomTheme(Translate("C:\Program Files (x86)\HAMILTON\Library\VectorCustomDialogs\ExampleThemes\PacBioTheme"), Translate("C:\Program Files (x86)\HAMILTON\Library\VectorCustomDialogs\ExampleThemes\PacBioTheme\CustomTheme.xml"));
    if(0){
      VectorCustomDialogs::InitializeWithIconSetDirectoryAndCustomTheme(Translate("C:\Program Files (x86)\HAMILTON\Library\VectorCustomDialogs\CustomColorSchemes\ASWIconSet_0"), Translate("C:\Program Files (x86)\HAMILTON\Library\VectorCustomDialogs\CustomColorSchemes\ASWIconSet_0\0.xml"));
    }
    VectorCustomDialogs::ShowStatusDialog(t_strKitName);
    if(0){
      t_blnReturn = VectorCustomDialogs::ErrorDialog(t_strKitName, VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Method has completed simulation and water testing only. Proceed at your own risk!"), Translate(""));
    }
    t_blnSimulationMode = Util::GetSimulationMode();
    t_strSerialNumberMLStar = GetSerialNumber(ML_STAR);
    DATACONTROLLER::INIT_InitializeController(t_blnSimulationMode, ASWGLOBAL::BOOL::TRUE, t_blnTestTimers, t_strMappingFilePath);
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::INIT_InitializeController(ML_STAR, TRACE_LEVEL_RELEASE, t_blnSkipPipetting, 54, t_blnSimulationMode, t_strMappingFilePath, t_blnTestTimers);
    ARW_LOADINGLIB::ARW_LoadingLib_START(ML_STAR, Translate("NGSStar"), t_strKitVendor, t_strKitName);
    VectorCustomDialogs::AppendStatusText(Translate("     Initializing Instrument"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    HAMILTONHEATERSHAKERCONTROL::SetSimulation(ML_STAR, t_blnSimulationMode);
    HAMILTONHEATERSHAKERCONTROL::SetErrorHandling(1);
    HAMILTONHEATERSHAKERCONTROL::ConnectAllHHSs(ML_STAR, 0);
    CPACCONTROLLER::CPAC_Init(t_blnSimulationMode);
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
    }
    _DATA_SelectProcesses();
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      CPACCONTROLLER::CPAC_SetTemperature(4, 1);
    }
    else
    {
      if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        CPACCONTROLLER::CPAC_SetTemperature(4, 1);
      }
    }
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      HAMILTONHEATERSHAKERCONTROL::StartTemperatureControl(ML_STAR, 1, 37.0, ASWGLOBAL::BOOL::FALSE);
      HAMILTONHEATERSHAKERCONTROL::StartTemperatureControl(ML_STAR, 2, 65.0, ASWGLOBAL::BOOL::FALSE);
    }
    _DATA_SequenceDefinitions();
    _DATA_CalculateLoadingDialogs();
    l_intAdapterColumnStartForDialog = t_intAdapterColumnStart + 1;
    t_strFinalCleanup = Translate("");
    if (t_intSelectedIndexSTART == 1)
    {
      l_strSTARTtext = Translate("DNA shearing");
    }
    if (t_intSelectedIndexSTART == 2)
    {
      l_strSTARTtext = Translate("Post Shear Cleanup");
    }
    if (t_intSelectedIndexSTART == 3)
    {
      l_strSTARTtext = Translate("End Repair and A-tailing");
    }
    if (t_intSelectedIndexSTART == 4)
    {
      l_strSTARTtext = Translate("Adapter Ligation");
    }
    if (t_intSelectedIndexSTART == 5)
    {
      l_strSTARTtext = Translate("Pooling");
    }
    if (t_intSelectedIndexSTOP == 1)
    {
      l_strENDtext = Translate("DNA shearing");
    }
    if (t_intSelectedIndexSTOP == 2)
    {
      l_strENDtext = Translate("Post Shear Cleanup");
    }
    if (t_intSelectedIndexSTOP == 3)
    {
      l_strENDtext = Translate("End Repair and A-tailing");
    }
    if (t_intSelectedIndexSTOP == 4)
    {
      l_strENDtext = Translate("Adapter Ligation");
    }
    if (t_intSelectedIndexSTOP == 5)
    {
      l_strENDtext = Translate("Pooling");
    }
    if (l_intAdapterColumnStartForDialog == 0)
    {
      l_intAdapterColumnStartForDialog = Translate("N/A");
    }
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "textBlock9.Text", t_intNumberOfSamples );
    customDialog_1.SetCustomDialogProperty( "textBlock12.Text", l_strSTARTtext );
    customDialog_1.SetCustomDialogProperty( "textBlock13.Text", l_strENDtext );
    customDialog_1.SetCustomDialogProperty( "textBlock14.Text", l_intAdapterColumnStartForDialog );
    customDialog_1.SetCustomDialogProperty( "textBlock3.Text", t_strUserId );
    customDialog_1.SetCustomDialogProperty( "textBlock5.Text", t_intInputSampleVolume );
    customDialog_1.ShowCustomDialog();
    retValueReviewSelctions = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    if (retValueReviewSelctions == 2)
    {
      abort;
    }
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M1_DNAShearing();
    }
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M2_PostShearCleanup();
    }
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M3_RepairAndATailing();
    }
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M4_AdapterLigation();
    }
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M5_PoolingLigation();
    }
    if (t_blnSkipCarrierUnload == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    VectorCustomDialogs::AppendStatusText(Translate("     METHOD COMPLETE"));
    HAMILTONHEATERSHAKERCONTROL::TerminateAllHHSs(ML_STAR);
    CPACCONTROLLER::CPAC_Terminate();
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    t_arrShutdownList.SetSize(0);
    t_arrShutdownList.AddAsLast(Translate("1.  Check/empty the tip waste"));
    t_arrShutdownList.AddAsLast(Translate("2.  Check/empty the liquid waste container"));
    t_arrShutdownList.AddAsLast(Translate("3.  Remove and store reagents and processing plates"));
    t_blnReturn = VectorCustomDialogs::ListDialog(Translate("HiFi Plex"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Method completed. Perform the following actions:"), Translate("Do you want to defragment the tip racks?"), t_arrShutdownList);
    if (t_blnReturn == ASWGLOBAL::DIALOG::YES)
    {
      STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::TIP_TipConsolidation(ML_STAR);
    }
    VectorCustomDialogs::Terminate();
    ARW_LOADINGLIB::_ExitLibrary();
    INHECO_ODTCCONTROL_ADVANCED_V1_0_2::_ExitLibrary();
    CPACCONTROLLER::_ExitLibrary();
    STAR_VOV_GENERIC_FRAMEWORK_V0_2_1::_ExitLibrary();
    HAMILTONHEATERSHAKERCONTROL::_ExitLibrary();
    DATACONTROLLER::_ExitLibrary();
    STACKREDUCER::_ExitLibrary();
    STAR_CHANNEL_TOOLS::_ExitLibrary();
  } }
