<?xml version="1.0" encoding="utf-8"?>
<MethodSet version="1.0.1.27826">
  <DeleteAllMethods>false</DeleteAllMethods>
  <PreMethod methodName="PreMethod10_Lid110" creator="Hamilton" dateTime="2021-03-09T10:36:53.1169609+01:00">
    <TargetBlockTemperature>10</TargetBlockTemperature>
    <TargetLidTemp>110</TargetLidTemp>
    <Ext v="1">
      <CS>2D8F92D2F299D9F3804305B4F2A48FD6591E56781BE7B5CF6917CE7B415323CD</CS>
      <Variant>960000</Variant>
      <Version>1.0.0.27826</Version>
      <LidLocked>true</LidLocked>
      <LastChanged />
    </Ext>
  </PreMethod>
  <PreMethod methodName="PreMethod25_Lid110" creator="Hamilton" dateTime="2021-03-09T10:37:47.5085625+01:00">
    <TargetBlockTemperature>25</TargetBlockTemperature>
    <TargetLidTemp>110</TargetLidTemp>
    <Ext v="1">
      <CS>94F46B7C2F3CE223E3CF166FF02EDC2A77B20DE6F0437133211F606EDB29C18F</CS>
      <Variant>960000</Variant>
      <Version>1.0.0.27826</Version>
      <LidLocked>true</LidLocked>
      <LastChanged />
    </Ext>
  </PreMethod>
  <PreMethod methodName="PreMethod37_Lid50" creator="Hamilton" dateTime="2021-03-09T10:38:14.9646171+01:00">
    <TargetBlockTemperature>37</TargetBlockTemperature>
    <TargetLidTemp>50</TargetLidTemp>
    <Ext v="1">
      <CS>05ECD0685D7F9D3F01026A7B0755B04C6CE9873AC9BD2D9A11720C8377006BA7</CS>
      <Variant>960000</Variant>
      <Version>1.0.0.27826</Version>
      <LidLocked>false</LidLocked>
      <LastChanged>2021-04-09T06:59:39.2646484Z</LastChanged>
    </Ext>
  </PreMethod>
  <PreMethod methodName="PreMethod65_Lid80" creator="Hamilton" dateTime="2021-03-09T10:38:35.9675468+01:00">
    <TargetBlockTemperature>65</TargetBlockTemperature>
    <TargetLidTemp>80</TargetLidTemp>
    <Ext v="1">
      <CS>878FBEA2F8F984A795AA3B97A111FCFC73D61C4F179D8BE4A87D667FB8E268F9</CS>
      <Variant>960000</Variant>
      <Version>1.0.0.27826</Version>
      <LidLocked>false</LidLocked>
      <LastChanged>2021-04-09T07:01:53.7867499Z</LastChanged>
    </Ext>
  </PreMethod>
  <PreMethod methodName="PreMethod8_Lid50" creator="Hamilton" dateTime="2021-03-31T08:38:42.4766102+02:00">
    <TargetBlockTemperature>8</TargetBlockTemperature>
    <TargetLidTemp>50</TargetLidTemp>
    <Ext v="1">
      <CS>79AAE757BA90659D39C44F86C9C2C7F8C177698DA588F04AF3ED828D86D07F4A</CS>
      <Variant>960000</Variant>
      <Version>1.0.0.27826</Version>
      <LidLocked>false</LidLocked>
      <LastChanged>2021-04-09T07:01:59.4449531Z</LastChanged>
    </Ext>
  </PreMethod>
  <Method methodName="PrimerAnnealing" creator="Hamilton" dateTime="2021-03-09T10:38:55.415789+01:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>65</StartBlockTemperature>
    <StartLidTemperature>80</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>65</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>80</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>2.2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>2</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>80</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>2</PlateauTime>
      <OverShootSlope1>1.4</OverShootSlope1>
      <OverShootTemperature>3.2</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>80</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>2</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>80</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>80</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
    <Ext v="1">
      <CS>22B9810A227DD9ED3752A6F15FF393E24A1BCFB78BDBFD1AA14F9FACB1B04663</CS>
      <Mode>N</Mode>
      <MaxHC>True</MaxHC>
      <Version>1.0.0.27826</Version>
      <LidLocked>false</LidLocked>
      <LastChanged>2021-04-09T07:02:36.9342109Z</LastChanged>
    </Ext>
  </Method>
  <Method methodName="ReverseTranscriptionFAST" creator="Hamilton" dateTime="2021-03-09T10:42:46.103289+01:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>8</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>8</PlateauTemperature>
      <PlateauTime>600</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>42</PlateauTemperature>
      <PlateauTime>4800</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>5.8</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>2</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>2</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
    <Ext v="1">
      <CS>371AEDC9C08055FAA48B1024A6BC1C08579FC376DD487C8BE42364A9F8260CC1</CS>
      <Mode>N</Mode>
      <MaxHC>True</MaxHC>
      <Version>1.0.0.27826</Version>
      <LidLocked>true</LidLocked>
      <LastChanged>2021-03-31T06:39:48.1743679Z</LastChanged>
    </Ext>
  </Method>
  <Method methodName="PrimerAnnealing_Short" creator="Hamilton" dateTime="2021-03-09T10:46:59.9499687+01:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>65</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>65</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>2.2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>1.4</OverShootSlope1>
      <OverShootTemperature>3.2</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
    <Ext v="1">
      <CS>27D748CA22402A3DFAD6D6F55D20B44CFE74E8A3728D456DBB3034848D8930C4</CS>
      <Mode>N</Mode>
      <MaxHC>True</MaxHC>
      <Version>1.0.0.27826</Version>
      <LidLocked>true</LidLocked>
      <LastChanged>2021-03-09T09:48:06.3562187Z</LastChanged>
    </Ext>
  </Method>
  <Method methodName="ReverseTranscription_Short" creator="Hamilton" dateTime="2021-03-09T10:48:17.1208671+01:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>8</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>8</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>42</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>5.8</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
    <Ext v="1">
      <CS>9B5988157AF8152363C64A78C601BA64AF559C3CE22921F2E309B7C85E86E732</CS>
      <Mode>N</Mode>
      <MaxHC>True</MaxHC>
      <Version>1.0.0.27826</Version>
      <LidLocked>true</LidLocked>
      <LastChanged>2021-03-31T06:39:42.6610526Z</LastChanged>
    </Ext>
  </Method>
  <Method methodName="MultiplexAmplificationFAST" creator="Hamilton" dateTime="2021-03-09T10:50:19.6667656+01:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>600</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>6.5</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2.2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>2.2</OverShootSlope1>
      <OverShootTemperature>4.4</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>4</OverShootTemperature>
      <OverShootTime>1.6</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>3</GotoNumber>
      <LoopNumber>8</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>2.2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>2.2</OverShootSlope1>
      <OverShootTemperature>4.4</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>8</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>10</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>0.25</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
    <Ext v="1">
      <CS>3036F4A695C2190E2440DFF56251569834052B70E603959C1B992E8900D8C2C2</CS>
      <Mode>N</Mode>
      <MaxHC>True</MaxHC>
      <Version>1.0.0.27826</Version>
      <LidLocked>true</LidLocked>
      <LastChanged>2021-03-29T12:18:15.7203359Z</LastChanged>
      <PCR>
        <ID>95</ID>
        <IDD>600.0</IDD>
        <D>98</D>
        <DD>15</DD>
        <A />
        <AD />
        <E>60</E>
        <ED>300.0</ED>
        <FE />
        <FED />
        <C>10</C>
        <CD>30.0</CD>
        <CY>9</CY>
      </PCR>
    </Ext>
  </Method>
  <Method methodName="MultiplexAmplification_Short" creator="Hamilton" dateTime="2021-03-09T10:52:30.4616875+01:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>6.5</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2.2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>2.2</OverShootSlope1>
      <OverShootTemperature>4.4</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>4</OverShootTemperature>
      <OverShootTime>1.6</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>3</GotoNumber>
      <LoopNumber>2</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>2.2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>2.2</OverShootSlope1>
      <OverShootTemperature>4.4</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>8</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>10</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.25</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
    <Ext v="1">
      <CS>45532A26C6AEF206AC92BDF5BDD091DDA9E14A34B548E23B0F729C0151106FEE</CS>
      <Mode>N</Mode>
      <MaxHC>True</MaxHC>
      <Version>1.0.0.27826</Version>
      <LidLocked>true</LidLocked>
      <LastChanged>2021-03-09T09:53:21.0739921Z</LastChanged>
      <PCR>
        <ID>95</ID>
        <IDD>10.0</IDD>
        <D>98</D>
        <DD>5.0</DD>
        <A />
        <AD />
        <E>60</E>
        <ED>5.0</ED>
        <FE />
        <FED />
        <C>10</C>
        <CD>10.0</CD>
        <CY>3</CY>
      </PCR>
    </Ext>
  </Method>
  <Method methodName="Digestion" creator="Hamilton" dateTime="2021-03-09T10:53:49.4958671+01:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>37</StartBlockTemperature>
    <StartLidTemperature>50</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>37</PlateauTemperature>
      <PlateauTime>560</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>50</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>2</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>50</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>10</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>50</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
    <Ext v="1">
      <CS>2FA33D569C63D452B54B86774CEF581822DD7094346325C0CC10587CB7426D0F</CS>
      <Mode>N</Mode>
      <MaxHC>True</MaxHC>
      <Version>1.0.0.27826</Version>
      <LidLocked>false</LidLocked>
      <LastChanged>2021-04-09T07:02:57.1314765Z</LastChanged>
    </Ext>
  </Method>
  <Method methodName="Digestion_Short" creator="Hamilton" dateTime="2021-03-09T10:54:29.4362968+01:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>37</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>37</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>2</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>10</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
    <Ext v="1">
      <CS>9E0E4D79080BF0469422A47D7AE477EEBCDC7A9BFBB7183381EA25AD68071262</CS>
      <Mode>N</Mode>
      <MaxHC>True</MaxHC>
      <Version>1.0.0.27826</Version>
      <LidLocked>true</LidLocked>
      <LastChanged>2021-03-31T06:42:47.6956359Z</LastChanged>
    </Ext>
  </Method>
  <Method methodName="SecondAmplificationFAST" creator="Hamilton" dateTime="2021-03-09T10:55:56.9480156+01:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>600</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>7</OverShootTemperature>
      <OverShootTime>6</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>75</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>4.6</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>4</OverShootTemperature>
      <OverShootTime>11.1</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>3</GotoNumber>
      <LoopNumber>23</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>75</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>4.6</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>1.3</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>8</Number>
      <Slope>0.23</Slope>
      <PlateauTemperature>10</PlateauTemperature>
      <PlateauTime>20</PlateauTime>
      <OverShootSlope1>0.23</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
    <Ext v="1">
      <CS>53D4CB5F95F22F80BD3F7329446127D247C4FF2C0295D861D1B0C3625E55A51B</CS>
      <Mode>N</Mode>
      <MaxHC>True</MaxHC>
      <Version>1.0.0.27826</Version>
      <LidLocked>true</LidLocked>
      <LastChanged>2021-03-29T12:18:22.6129141Z</LastChanged>
      <PCR>
        <ID>95</ID>
        <IDD>600.0</IDD>
        <D>98</D>
        <DD>30.0</DD>
        <A />
        <AD />
        <E>60</E>
        <ED>75.0</ED>
        <FE />
        <FED />
        <C>10</C>
        <CD>20</CD>
        <CY>24</CY>
      </PCR>
    </Ext>
  </Method>
  <Method methodName="SecondAmplification_Short" creator="Hamilton" dateTime="2021-03-09T10:58:03.2986015+01:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>7</OverShootTemperature>
      <OverShootTime>6</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>4.6</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>4</OverShootTemperature>
      <OverShootTime>11.1</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>3</GotoNumber>
      <LoopNumber>2</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>4.6</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>1.3</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>8</Number>
      <Slope>0.23</Slope>
      <PlateauTemperature>10</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.23</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
    <Ext v="1">
      <CS>727C3290D27627AC7EE354C0658E451B59AA5EA5F39DCD09D1230BC119F5C41E</CS>
      <Mode>N</Mode>
      <MaxHC>True</MaxHC>
      <Version>1.0.0.27826</Version>
      <LidLocked>true</LidLocked>
      <LastChanged>2021-03-09T09:58:39.2273125Z</LastChanged>
      <PCR>
        <ID>95</ID>
        <IDD>10.0</IDD>
        <D>98</D>
        <DD>5.0</DD>
        <A />
        <AD />
        <E>60</E>
        <ED>5.0</ED>
        <FE />
        <FED />
        <C>10</C>
        <CD>10.0</CD>
        <CY>3</CY>
      </PCR>
    </Ext>
  </Method>
  <Method methodName="ReverseTranscription" creator="Hamilton" dateTime="2021-03-29T14:07:29.3892812+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>8</StartBlockTemperature>
    <StartLidTemperature>50</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>3</Slope>
      <PlateauTemperature>8</PlateauTemperature>
      <PlateauTime>600</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>50</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>3</Slope>
      <PlateauTemperature>42</PlateauTemperature>
      <PlateauTime>4800</PlateauTime>
      <OverShootSlope1>3</OverShootSlope1>
      <OverShootTemperature>5.4</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>50</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>2</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>50</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>2</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>50</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>50</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
    <Ext v="1">
      <CS>765BF525F1F0391AE517369F973D4DE52CA117E486CAA8F28CB365EFCE4EF268</CS>
      <Mode>N</Mode>
      <MaxHC>False</MaxHC>
      <Version>1.0.0.27826</Version>
      <LidLocked>false</LidLocked>
      <LastChanged>2021-04-09T07:03:13.0992499Z</LastChanged>
    </Ext>
  </Method>
  <Method methodName="MultiplexAmplification" creator="Hamilton" dateTime="2021-03-29T14:19:55.9801016+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>3</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>600</PlateauTime>
      <OverShootSlope1>3</OverShootSlope1>
      <OverShootTemperature>6</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>3</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>4.3</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>3</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>3</OverShootSlope1>
      <OverShootTemperature>4</OverShootTemperature>
      <OverShootTime>1.4</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>3</GotoNumber>
      <LoopNumber>8</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>4.3</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>2</PlateauTime>
      <OverShootSlope1>1.4</OverShootSlope1>
      <OverShootTemperature>3.2</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>2</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>8</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>10</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
    <Ext v="1">
      <CS>85657E904A7CFCBFD2B679B1D1E4EA36839FFD0C2E2F146C56A961C0D367F2C5</CS>
      <Mode>N</Mode>
      <MaxHC>False</MaxHC>
      <Version>1.0.0.27826</Version>
      <LidLocked>true</LidLocked>
      <LastChanged>2021-03-29T12:25:00.6871328Z</LastChanged>
    </Ext>
  </Method>
  <Method methodName="SecondAmplification" creator="Hamilton" dateTime="2021-03-29T14:25:57.2359609+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>3</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>600</PlateauTime>
      <OverShootSlope1>3</OverShootSlope1>
      <OverShootTemperature>7</OverShootTemperature>
      <OverShootTime>5.6</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>3</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>75</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>4.6</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>3</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>3</OverShootSlope1>
      <OverShootTemperature>4</OverShootTemperature>
      <OverShootTime>10.9</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>3</GotoNumber>
      <LoopNumber>23</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>75</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>4.6</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>1.3</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>2</PlateauTime>
      <OverShootSlope1>1.3</OverShootSlope1>
      <OverShootTemperature>3.3</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>2</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>8</Number>
      <Slope>0.23</Slope>
      <PlateauTemperature>10</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
    <Ext v="1">
      <CS>EA5DBD3BBD1FAD6FC278C30888FA433A8E792FD0317ED479E0AA2E1F0EB67167</CS>
      <Mode>N</Mode>
      <MaxHC>False</MaxHC>
      <Version>1.0.0.27826</Version>
      <LidLocked>true</LidLocked>
      <LastChanged>2021-03-29T12:28:39.4000234Z</LastChanged>
    </Ext>
  </Method>
</MethodSet>