#pragma once
#include "HSLInhecoTEC\\HSLInhecoTECLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace CPACCONTROLLERSTC {
  variable strErrorCode;
  function CPAC_GetTemperature( variable & o_fltActualTemperature ) void ;
  function CPAC_StartTemperatureControl( variable i_fltTemperature ) void ;
  function CPAC_StopTemperatureControl( variable i_strDeviceName ) void ;
  function CPAC_TerminateAll(  ) void ;
  function Init( variable i_blnSimulationMode ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function Init( variable i_blnSimulationMode ) void {
    private variable strFunctionName;
    strFunctionName=GetFunctionName();
    Trace ("==================================================================");
    Trace ("");
    Trace ("Start function : ", strFunctionName);
    Trace ("");
    Trace ("==================================================================");
    HSLInhecoTECLib::Initialize(0, i_blnSimulationMode, strErrorCode);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Error code = "), strErrorCode);
    strFunctionName=GetFunctionName();
    Trace ("==================================================================");
    Trace ("");
    Trace ("Completed function : ", strFunctionName);
    Trace ("");
    Trace ("==================================================================");
  }

  function CPAC_StartTemperatureControl( variable i_fltTemperature ) void {
    private variable strFunctionName;
    strFunctionName=GetFunctionName();
    Trace ("==================================================================");
    Trace ("");
    Trace ("Start function : ", strFunctionName);
    Trace ("");
    Trace ("==================================================================");
    HSLInhecoTECLib::SetTargetTemperature(0, 1, i_fltTemperature, strErrorCode);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Error code = "), strErrorCode);
    HSLInhecoTECLib::StartTemperatureControl(0, 1, strErrorCode);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Error code = "), strErrorCode);
    strFunctionName=GetFunctionName();
    Trace ("==================================================================");
    Trace ("");
    Trace ("Completed function : ", strFunctionName);
    Trace ("");
    Trace ("==================================================================");
  }

  function CPAC_GetTemperature( variable & o_fltActualTemperature ) void {
    private variable strFunctionName;
    o_fltActualTemperature = 0;
    strFunctionName=GetFunctionName();
    Trace ("==================================================================");
    Trace ("");
    Trace ("Start function : ", strFunctionName);
    Trace ("");
    Trace ("==================================================================");
    HSLInhecoTECLib::GetActualDeviceTemperature(0, 1, 0, o_fltActualTemperature, strErrorCode);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Error code = "), strErrorCode);
    Trace ("======> Actual temperature = ", o_fltActualTemperature);
    strFunctionName=GetFunctionName();
    Trace ("==================================================================");
    Trace ("");
    Trace ("Completed function : ", strFunctionName);
    Trace ("");
    Trace ("==================================================================");
  }

  function CPAC_StopTemperatureControl( variable i_strDeviceName ) void {
    private variable strFunctionName;
    strFunctionName=GetFunctionName();
    Trace ("==================================================================");
    Trace ("");
    Trace ("Start function : ", strFunctionName);
    Trace ("");
    Trace ("==================================================================");
    HSLInhecoTECLib::StopTemperatureControl(0, 1, strErrorCode);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Error code = "), strErrorCode);
    strFunctionName=GetFunctionName();
    Trace ("==================================================================");
    Trace ("");
    Trace ("Completed function : ", strFunctionName);
    Trace ("");
    Trace ("==================================================================");
  }

  function CPAC_TerminateAll(  ) void {
    private variable strFunctionName;
    strFunctionName=GetFunctionName();
    Trace ("==================================================================");
    Trace ("");
    Trace ("Start function : ", strFunctionName);
    Trace ("");
    Trace ("==================================================================");
    HSLInhecoTECLib::StopTemperatureControl(0, 1, strErrorCode);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Error code = "), strErrorCode);
    HSLInhecoTECLib::Terminate(1);
    strFunctionName=GetFunctionName();
    Trace ("==================================================================");
    Trace ("");
    Trace ("Completed function : ", strFunctionName);
    Trace ("");
    Trace ("==================================================================");
  }
} // library namespace
