#pragma once
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HslHamHeaterShakerLib.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace HHSCONTROLLER {
  timer timerShaker;
  function Clamps_Close( device & ML_STAR, variable i_intDeviceNumber ) variable ;
  function Clamps_Open( device & ML_STAR, variable i_intDeviceNumber ) variable ;
  function GetTemperature( variable & o_fltTemperature, variable i_intDeviceNumber ) variable ;
  function Init( device & ML_STAR, variable i_intUsedNode, variable i_intDeviceNumber ) variable ;
  function Shake( device & ML_STAR, variable i_intRPM, variable i_intTime, variable i_intDeviceNumber ) variable ;
  function StartHeater( device & ML_STAR, variable i_fltTemperature, variable i_intDeviceNumber ) variable ;
  function StartShaker( device & ML_STAR, variable i_intRPM, variable i_intTime, variable i_intDeviceNumber ) variable ;
  function StopHeater( device & ML_STAR, variable i_intDeviceNumber ) variable ;
  function StopShaker( device & ML_STAR, variable i_intDeviceNumber ) variable ;
  function Terminate( device & ML_STAR, variable i_intDeviceNumber1, variable i_intDeviceNumber2 ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function GetTemperature( variable & o_fltTemperature, variable i_intDeviceNumber ) variable {
    private variable retVal;
    private variable strFunctionName;
    o_fltTemperature = 0;
    strFunctionName = "";
    strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " begin");
    retVal = HSLHamHeaterShaker::GetTemperature(i_intDeviceNumber, o_fltTemperature);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Detected HHS Temperature_________"), o_fltTemperature);
    if (retVal != 0)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, " ===== Error in HHS GetTemperature, error code = ", retVal, " ===== ", " The method will Abort");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " complete");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Init( device & ML_STAR, variable i_intUsedNode, variable i_intDeviceNumber ) variable {
    private variable retVal;
    private variable strFunctionName;
    strFunctionName = "";
    strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " begin");
    if(0){
      retVal = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, i_intUsedNode, i_intDeviceNumber);
    }
    HSLHamHeaterShaker::CreateUsbDevice(i_intUsedNode, i_intDeviceNumber);
    if (retVal != 0)
    {
      if(0){
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, " ===== Error in HHS Create STAR Device, error code = ", retVal, " ===== ", " The nethod will Abort");
      }
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, " ===== Error in HHS Create USB Device, error code = ", retVal, " ===== ", " The nethod will Abort");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " complete");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Shake( device & ML_STAR, variable i_intRPM, variable i_intTime, variable i_intDeviceNumber ) variable {
    private variable retVal;
    private variable strFunctionName;
    strFunctionName = "";
    strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " begin");
    retVal = HSLHamHeaterShaker::StartShaker(i_intDeviceNumber, i_intRPM);
    if (retVal != 0)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, " ===== Error in HHS StartShaker, error code = ", retVal, " ===== ", " The method will Abort");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if( 0 == timerShaker.SetTimer(i_intTime) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == timerShaker.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    retVal = HSLHamHeaterShaker::StopShaker(i_intDeviceNumber);
    if (retVal != 0)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, " ===== Error in HHS Stop Shaker, error code = ", retVal, " ===== ", " The method will Abort");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " complete");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function StartHeater( device & ML_STAR, variable i_fltTemperature, variable i_intDeviceNumber ) variable {
    private variable retVal;
    private variable strFunctionName;
    strFunctionName = "";
    strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " begin");
    retVal = HSLHamHeaterShaker::StartTempCtrl(i_intDeviceNumber, i_fltTemperature, 0);
    if (retVal != 0)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, " ===== Error in HHS StartHeater, error code = ", retVal, " ===== ", " The method will Abort");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " complete");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function StartShaker( device & ML_STAR, variable i_intRPM, variable i_intTime, variable i_intDeviceNumber ) variable {
    private variable retVal;
    private variable strFunctionName;
    strFunctionName = "";
    strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " begin");
    retVal = HSLHamHeaterShaker::StartShaker(i_intDeviceNumber, i_intRPM);
    if (retVal != 0)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, " ===== Error in HHS StartShaker, error code = ", retVal, " ===== ", " The method will Abort");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if( 0 == timerShaker.SetTimer(i_intTime) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " complete");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function StopHeater( device & ML_STAR, variable i_intDeviceNumber ) variable {
    private variable retVal;
    private variable strFunctionName;
    strFunctionName = "";
    strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " begin");
    retVal = HSLHamHeaterShaker::StopTempCtrl(i_intDeviceNumber);
    if (retVal != 0)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, " ===== Error in HHS StopHeater, error code = ", retVal, " ===== ", " The method will Abort");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " complete");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function StopShaker( device & ML_STAR, variable i_intDeviceNumber ) variable {
    private variable retVal;
    private variable strFunctionName;
    strFunctionName = "";
    strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " begin");
    if( 0 == timerShaker.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    retVal = HSLHamHeaterShaker::StopShaker(i_intDeviceNumber);
    if (retVal != 0)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, " ===== Error in HHS Stop Shaker, error code = ", retVal, " ===== ", " The method will Abort");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " complete");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Terminate( device & ML_STAR, variable i_intDeviceNumber1, variable i_intDeviceNumber2 ) variable {
    private variable retVal;
    private variable strFunctionName;
    strFunctionName = "";
    strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " begin");
    if (i_intDeviceNumber1 != 0)
    {
      retVal = HSLHamHeaterShaker::StopTempCtrl(i_intDeviceNumber1);
      if (retVal != 0)
      {
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, " ===== Error in HHS Stop TempCtrl, error code = ", retVal, " ===== ", " The method will Abort");
        return (ASWGLOBAL::BOOL::FALSE);
      }
      retVal = HSLHamHeaterShaker::StopShaker(i_intDeviceNumber1);
      if (retVal != 0)
      {
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, " ===== Error in HHS StopShaker, error code = ", retVal, " ===== ", " The method will Abort");
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    if (i_intDeviceNumber2 != 0)
    {
      retVal = HSLHamHeaterShaker::StopTempCtrl(i_intDeviceNumber2);
      if (retVal != 0)
      {
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, " ===== Error in HHS Stop TempCtrl, error code = ", retVal, " ===== ", " The method will Abort");
        return (ASWGLOBAL::BOOL::FALSE);
      }
      retVal = HSLHamHeaterShaker::StopShaker(i_intDeviceNumber2);
      if (retVal != 0)
      {
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, " ===== Error in HHS StopShaker, error code = ", retVal, " ===== ", " The method will Abort");
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    HSLHamHeaterShaker::Terminate();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " complete");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Clamps_Open( device & ML_STAR, variable i_intDeviceNumber ) variable {
    private variable retVal;
    private variable strFunctionName;
    strFunctionName = "";
    strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " begin");
    retVal = HSLHamHeaterShaker::SetPlateLock(i_intDeviceNumber, 0);
    if (retVal != 0)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, " ===== Error in HHS Plate lock, error code = ", retVal, " ===== ", " The method will Abort");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " complete");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Clamps_Close( device & ML_STAR, variable i_intDeviceNumber ) variable {
    private variable retVal;
    private variable strFunctionName;
    strFunctionName = "";
    strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " begin");
    retVal = HSLHamHeaterShaker::SetPlateLock(i_intDeviceNumber, 1);
    if (retVal != 0)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, " ===== Error in HHS Plate lock, error code = ", retVal, " ===== ", " The method will Abort");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, "===== ", strFunctionName, " ===== ", " complete");
    return (ASWGLOBAL::BOOL::TRUE);
  }
} // library namespace
