#pragma once
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLStrLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace IOCONTROLLER {
  function CalculateArrayForNormalization( variable i_strFileName, variable i_fltFinalConcentration, variable i_fltFixedDNAVolume, variable i_fltMinimalDilutionVolume, variable & o_arrDNAVolume[], variable & o_arrDiluentforNormalization[], variable & o_arr_fltMixingVolumes[], variable & o_arrHighConcSamples[], variable & o_arrLowConcSamples[], variable & o_intSampleNumber ) void ;
  function CalculateArrayForPlatePreparation( variable i_strFileName, variable i_fltDNAVol, variable i_fltFinalConcentration, variable & o_arr_fltDNAVolumes[], variable & o_arr_fltWaterVolumes[], variable & o_arr_fltMixingVolumes[], variable & o_intSampleNumber, variable & o_blnError ) void ;
  function CalculateArrayForPlatePreparationV3( variable i_strFileName, variable i_strLiquidClass50, variable i_strLiquidClass300, variable & o_arr_fltDNAVolumes[], variable & o_arr_fltWaterVolumes[], variable & o_arr_fltMixingVolumes[], variable & o_arr_strChannelPattern50[], variable & o_arr_strChannelPattern300[], variable & o_arr_strLiquidClass[], variable & o_intSampleNumber, variable & o_blnError, variable & o_intNeededTips50, variable & o_intNeededTips300 ) void ;
  function ReadExcelWorklist_Hybridization( variable i_strFileName, variable & o_intPoolNumber, variable & o_arrPanelProbePos[] ) void ;
  function ReadExcelWorklist_Indexing( variable i_strFileName, variable & o_intSampleNumber, variable & o_arr_strIndexPlatePosID[], variable & o_arr_strSamplePosID[] ) void ;
  function ReadExcelWorklist_Pooling( variable i_strFileName, variable i_fltLibraryVol, variable & o_intSampleNumber, variable & o_arr_strSamplePosID[], variable & o_arr_strDispensePosID[], variable & o_arr_fltDilunetVol[], variable & o_arr_fltMixingVol[] ) void ;
  function UpdateWorklistFile( variable i_strFileName, variable i_strBarcode, variable i_intColumnNumber, variable i_intRowNumber ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function ReadExcelWorklist_Indexing( variable i_strFileName, variable & o_intSampleNumber, variable & o_arr_strIndexPlatePosID[], variable & o_arr_strSamplePosID[] ) void {
    private file file1;
    private variable file1_SampleID;
    private variable file1_PosID;
    private variable file1_IndexPlatePos;
    private variable intLength;
    private variable strPosition;
    private variable file1_DNAconc;
    o_intSampleNumber = 0;
    o_arr_strIndexPlatePosID.SetSize( 0);
    o_arr_strSamplePosID.SetSize( 0);
    file1.SetExtendedProperties( "IMEX=1");
    file1.AddField("PosID", file1_PosID, hslString, 255);
    file1.AddField("SampleID", file1_SampleID, hslString, 255);
    file1.AddField("LibraryConc(nM)", file1_DNAconc, hslFloat);
    file1.AddField("IndexPlatePos", file1_IndexPlatePos, hslString, 255);
    if( 0 == file1.Open(i_strFileName + " " + "LibraryPrep$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strFileName, "HxMetEdCompCmd");
    }
    {
      while (
         (file1.Eof() == 0)
      )
      {
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        intLength = StrGetLength(file1_SampleID);
        if (intLength == 0)
        {
          break;
        }
        else
        {
          strPosition = StrConcat2(file1_PosID, Translate(""));
          o_arr_strSamplePosID.AddAsLast(file1_PosID);
          strPosition = StrConcat2(file1_IndexPlatePos, Translate(""));
          o_arr_strIndexPlatePosID.AddAsLast(file1_IndexPlatePos);
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    o_intSampleNumber=o_arr_strSamplePosID.GetSize();
  }

  function CalculateArrayForNormalization( variable i_strFileName, variable i_fltFinalConcentration, variable i_fltFixedDNAVolume, variable i_fltMinimalDilutionVolume, variable & o_arrDNAVolume[], variable & o_arrDiluentforNormalization[], variable & o_arr_fltMixingVolumes[], variable & o_arrHighConcSamples[], variable & o_arrLowConcSamples[], variable & o_intSampleNumber ) void {
    private variable loopCounter1;
    private variable intCheckLength;
    private variable file1_DNAconc;
    private variable file1_SampleID;
    private variable file1_PosID;
    private file file1;
    private variable fltFinalVol;
    private variable fltDiluentVol;
    private variable strSampleIdentification;
    private variable fltMixingVol;
    o_arrDNAVolume.SetSize( 0);
    o_arrDiluentforNormalization.SetSize( 0);
    o_arr_fltMixingVolumes.SetSize( 0);
    o_arrHighConcSamples.SetSize( 0);
    o_arrLowConcSamples.SetSize( 0);
    o_intSampleNumber = 0;
    file1.AddField("PosID", file1_PosID, hslString, 255);
    file1.AddField("SampleID", file1_SampleID, hslString, 255);
    file1.AddField("DNAconc", file1_DNAconc, hslFloat);
    if( 0 == file1.Open(i_strFileName + " " + "LibraryPrep$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strFileName, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        intCheckLength = StrGetLength(file1_SampleID);
        if (intCheckLength > 0)
        {
          if (file1_DNAconc <= i_fltFinalConcentration)
          {
            o_arrDNAVolume.AddAsLast(i_fltMinimalDilutionVolume);
            o_arr_fltMixingVolumes.AddAsLast(0);
            o_arrDiluentforNormalization.AddAsLast(0);
            strSampleIdentification = StrConcat4(loopCounter1, Translate(" - "), file1_SampleID, Translate(""));
            o_arrLowConcSamples.AddAsLast(strSampleIdentification);
          }
          else
          {
            o_arrDNAVolume.AddAsLast(i_fltFixedDNAVolume);
            fltFinalVol = (file1_DNAconc * i_fltFixedDNAVolume)/i_fltFinalConcentration;
            fltDiluentVol = fltFinalVol - i_fltFixedDNAVolume;
            fltMixingVol = fltFinalVol * 0.8;
            if (fltMixingVol > 50)
            {fltMixingVol = 50;}
            o_arr_fltMixingVolumes.AddAsLast(fltMixingVol);
            if (fltDiluentVol > 250)
            {
              o_arrDiluentforNormalization.AddAsLast(250);
              strSampleIdentification = StrConcat4(loopCounter1, Translate(" - "), file1_SampleID, Translate(""));
              o_arrHighConcSamples.AddAsLast(strSampleIdentification);
            }
            else
            {
              o_arrDiluentforNormalization.AddAsLast(fltDiluentVol);
            }
          }
        }
        else
        {
          break;
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    o_intSampleNumber=o_arrDNAVolume.GetSize();
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("Array of DNA volumes: "), Translate("Array of Diluent volumes: "), o_arrDNAVolume, o_arrDiluentforNormalization);
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("Array of Mixing volumes: "), Translate("Array of Diluent volumes: "), o_arr_fltMixingVolumes, o_arrDiluentforNormalization);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Array of High concentration samples: "), o_arrHighConcSamples);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Array of Low concentration samples: "), o_arrLowConcSamples);
  }

  function ReadExcelWorklist_Hybridization( variable i_strFileName, variable & o_intPoolNumber, variable & o_arrPanelProbePos[] ) void {
    private variable file1_ProbePanel;
    private variable file1_ProbePos;
    private variable intLength;
    private variable file1_PoolPos;
    private variable strPosition;
    private file file1;
    o_intPoolNumber = 0;
    o_arrPanelProbePos.SetSize( 0);
    file1.SetExtendedProperties( "IMEX=1");
    file1.AddField("PoolPos", file1_PoolPos, hslString, 255);
    file1.AddField("ProbePanel", file1_ProbePanel, hslString, 255);
    file1.AddField("ProbePos", file1_ProbePos, hslString, 255);
    if( 0 == file1.Open(i_strFileName + " " + "Enrichment$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strFileName, "HxMetEdCompCmd");
    }
    {
      while (
         (file1.Eof() == 0)
      )
      {
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        intLength = StrGetLength(file1_ProbePanel);
        if (intLength == 0)
        {
          break;
        }
        else
        {
          strPosition = StrConcat2(file1_ProbePos, Translate(""));
          o_arrPanelProbePos.AddAsLast(file1_ProbePos);
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    o_intPoolNumber=o_arrPanelProbePos.GetSize();
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("o_arrPanelProbePos = "), o_arrPanelProbePos);
  }

  function CalculateArrayForPlatePreparation( variable i_strFileName, variable i_fltDNAVol, variable i_fltFinalConcentration, variable & o_arr_fltDNAVolumes[], variable & o_arr_fltWaterVolumes[], variable & o_arr_fltMixingVolumes[], variable & o_intSampleNumber, variable & o_blnError ) void {
    private variable file1_DNAconc;
    private variable file1_SampleID;
    private variable loopCounter1;
    private variable intCheckLength;
    private variable file1_PosID;
    private file file1;
    private variable fltWaterVolume;
    private variable fltMixingVolume;
    o_arr_fltDNAVolumes.SetSize( 0);
    o_arr_fltWaterVolumes.SetSize( 0);
    o_arr_fltMixingVolumes.SetSize( 0);
    o_intSampleNumber = 0;
    o_blnError = 0;
    file1.AddField("PosID", file1_PosID, hslString, 255);
    file1.AddField("SampleID", file1_SampleID, hslString, 255);
    file1.AddField("DNAconc", file1_DNAconc, hslFloat);
    if( 0 == file1.Open(i_strFileName + " " + "LibraryPrep$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strFileName, "HxMetEdCompCmd");
    }
    o_blnError = 0;
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        intCheckLength = StrGetLength(file1_SampleID);
        if (intCheckLength > 0)
        {
          fltWaterVolume = i_fltDNAVol * file1_DNAconc;
          fltWaterVolume = fltWaterVolume / (i_fltFinalConcentration * 1.0);
          fltWaterVolume = MthRound(fltWaterVolume, 1);
          fltWaterVolume = fltWaterVolume - i_fltDNAVol;
          if(0){
            fltMixingVolume = fltWaterVolume;
          }
          fltMixingVolume = fltWaterVolume * 0.9;
          if (fltWaterVolume > 300)
          {
            fltWaterVolume = 300;
          }
          if (fltMixingVolume > 50)
          {
            fltMixingVolume = 50;
          }
          o_arr_fltWaterVolumes.AddAsLast(fltWaterVolume);
          o_arr_fltMixingVolumes.AddAsLast(fltMixingVolume);
          o_arr_fltDNAVolumes.AddAsLast(i_fltDNAVol);
          if(0){
            if (file1_DNAconc > 80)
            {
              o_blnError = 1;
            }
          }
          if (file1_DNAconc > 488)
          {
            o_blnError = 1;
          }
        }
        else
        {
          break;
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    o_intSampleNumber=o_arr_fltWaterVolumes.GetSize();
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("Array of Diluent volumes: "), Translate("Array of Mixing volumes: "), o_arr_fltWaterVolumes, o_arr_fltMixingVolumes);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("======> Sample Number = "), o_intSampleNumber);
  }

  function CalculateArrayForPlatePreparationV3( variable i_strFileName, variable i_strLiquidClass50, variable i_strLiquidClass300, variable & o_arr_fltDNAVolumes[], variable & o_arr_fltWaterVolumes[], variable & o_arr_fltMixingVolumes[], variable & o_arr_strChannelPattern50[], variable & o_arr_strChannelPattern300[], variable & o_arr_strLiquidClass[], variable & o_intSampleNumber, variable & o_blnError, variable & o_intNeededTips50, variable & o_intNeededTips300 ) void {
    private variable file1_DNAconc;
    private variable fltWaterVolume;
    private variable fltMixingVolume;
    private variable loopCounter1;
    private variable file1_SampleID;
    private variable intCheckLength;
    private variable file1_PosID;
    private file file1;
    private variable arrTempChannelPattern50[];
    private variable arrTempChannelPattern300[];
    private variable intFullPattern;
    private variable intSizeArray;
    private variable intIndex;
    private variable strChannelPattern300;
    private variable loopCounterFullPattern;
    private variable strChannelPattern50;
    private variable strChannelPattern300_8;
    private variable strChannelPattern50_8;
    private variable loopCounterChannelPattern;
    o_arr_fltDNAVolumes.SetSize( 0);
    o_arr_fltWaterVolumes.SetSize( 0);
    o_arr_fltMixingVolumes.SetSize( 0);
    o_arr_strChannelPattern50.SetSize( 0);
    o_arr_strChannelPattern300.SetSize( 0);
    o_arr_strLiquidClass.SetSize( 0);
    o_intSampleNumber = 0;
    o_blnError = 0;
    o_intNeededTips50 = 0;
    o_intNeededTips300 = 0;
    arrTempChannelPattern50.SetSize(0);
    arrTempChannelPattern300.SetSize(0);
    file1.AddField("PosID", file1_PosID, hslString, 255);
    file1.AddField("SampleID", file1_SampleID, hslString, 255);
    file1.AddField("DNAconc", file1_DNAconc, hslFloat);
    if( 0 == file1.Open(i_strFileName + " " + "LibraryPrep$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strFileName, "HxMetEdCompCmd");
    }
    o_blnError = 0;
    o_intNeededTips50 = 0;
    o_intNeededTips300 = 0;
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        intCheckLength = StrGetLength(file1_SampleID);
        if (intCheckLength > 0)
        {
          fltWaterVolume = 5 * file1_DNAconc;
          fltWaterVolume = fltWaterVolume / (8 * 1.0);
          fltWaterVolume = fltWaterVolume - 5;
          fltMixingVolume = fltWaterVolume;
          if (fltWaterVolume > 50)
          {
            if (fltWaterVolume > 300)
            {
              o_intNeededTips300 = o_intNeededTips300 + 1;
              o_arr_strLiquidClass.AddAsLast(i_strLiquidClass300);
              arrTempChannelPattern300.AddAsLast(Translate("1"));
              arrTempChannelPattern50.AddAsLast(Translate("0"));
              fltWaterVolume = 300;
            }
            o_intNeededTips300 = o_intNeededTips300 + 1;
            o_arr_strLiquidClass.AddAsLast(i_strLiquidClass300);
            arrTempChannelPattern300.AddAsLast(Translate("1"));
            arrTempChannelPattern50.AddAsLast(Translate("0"));
          }
          else
          {
            o_intNeededTips50 = o_intNeededTips50 + 1;
            arrTempChannelPattern50.AddAsLast(Translate("1"));
            arrTempChannelPattern300.AddAsLast(Translate("0"));
            o_arr_strLiquidClass.AddAsLast(i_strLiquidClass50);
          }
          if (fltMixingVolume > 50)
          {
            fltMixingVolume = 50;
          }
          o_arr_fltWaterVolumes.AddAsLast(fltWaterVolume);
          o_arr_fltMixingVolumes.AddAsLast(fltMixingVolume);
          o_arr_fltDNAVolumes.AddAsLast(5);
          if(0){
            if (file1_DNAconc > 80)
            {
              o_blnError = 1;
            }
          }
          if (file1_DNAconc > 488)
          {
            o_blnError = 1;
          }
        }
        else
        {
          break;
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    o_intSampleNumber=o_arr_fltWaterVolumes.GetSize();
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("Array of Diluent volumes: "), Translate("Array of Mixing volumes: "), o_arr_fltWaterVolumes, o_arr_fltMixingVolumes);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("======> Sample Number = "), o_intSampleNumber);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("======> NeededTips 50 = "), o_intNeededTips50);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("======> NeededTips 300 = "), o_intNeededTips300);
    intSizeArray=arrTempChannelPattern50.GetSize();
    intFullPattern = intSizeArray / (8 * 1.0);
    intFullPattern = MthCeiling(intFullPattern);
    intIndex = 1;
    {
      for(loopCounterFullPattern = 0; loopCounterFullPattern < intFullPattern;)
      {
        loopCounterFullPattern = loopCounterFullPattern + 1;
        strChannelPattern50_8 = Translate("");
        strChannelPattern300_8 = Translate("");
        {
          for(loopCounterChannelPattern = 0; loopCounterChannelPattern < 8;)
          {
            loopCounterChannelPattern = loopCounterChannelPattern + 1;
            if (intIndex > intSizeArray)
            {
              strChannelPattern50_8 = StrConcat2(strChannelPattern50_8, Translate("0"));
              strChannelPattern300_8 = StrConcat2(strChannelPattern300_8, Translate("0"));
            }
            else
            {
              strChannelPattern50=arrTempChannelPattern50.GetAt(intIndex-1);
              strChannelPattern300=arrTempChannelPattern300.GetAt(intIndex-1);
              strChannelPattern50_8 = StrConcat2(strChannelPattern50_8, strChannelPattern50);
              strChannelPattern300_8 = StrConcat2(strChannelPattern300_8, strChannelPattern300);
            }
            intIndex = intIndex + 1;
          }
        }
        o_arr_strChannelPattern50.AddAsLast(strChannelPattern50_8);
        o_arr_strChannelPattern300.AddAsLast(strChannelPattern300_8);
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Array LiquidClasses: "), o_arr_strLiquidClass);
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("Array ChannelPattern 50: "), Translate("Array ChannelPattern 300: "), o_arr_strChannelPattern50, o_arr_strChannelPattern300);
  }

  function UpdateWorklistFile( variable i_strFileName, variable i_strBarcode, variable i_intColumnNumber, variable i_intRowNumber ) void {
    private variable strColumnName1;
    private variable file1_MyColumn;
    private variable file1_F1;
    private variable strSQL;
    private file file1;
    private variable file1_F2;
    private variable file1_F3;
    strColumnName1 = StrConcat2(Translate("F"), i_intColumnNumber);
    strSQL = StrConcat8(Translate("UPDATE [Barcodes$] SET ["), strColumnName1, Translate("] = '"), i_strBarcode, Translate("' WHERE [F1] = "), i_intRowNumber, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("strSQL__________"), strSQL);
    file1.SetExtendedProperties( "HDR=NO");
    file1.AddField("F1", file1_F1, hslFloat);
    file1.AddField("F2", file1_F2, hslString, 255);
    file1.AddField("F3", file1_F3, hslString, 255);
    if( 0 == file1.Open(i_strFileName + " " + "Barcodes$", hslAppend, strSQL) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strFileName, "HxMetEdCompCmd");
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
  }

  function ReadExcelWorklist_Pooling( variable i_strFileName, variable i_fltLibraryVol, variable & o_intSampleNumber, variable & o_arr_strSamplePosID[], variable & o_arr_strDispensePosID[], variable & o_arr_fltDilunetVol[], variable & o_arr_fltMixingVol[] ) void {
    private variable intLength;
    private variable strPosition;
    private variable file1_DNAconc;
    private variable file1_SampleID;
    private variable file1_IndexPlatePos;
    private variable file1_PosID;
    private file file1;
    private variable fltDiluent;
    private variable fltMixingVol;
    private variable intDispensePos;
    o_intSampleNumber = 0;
    o_arr_strSamplePosID.SetSize( 0);
    o_arr_strDispensePosID.SetSize( 0);
    o_arr_fltDilunetVol.SetSize( 0);
    o_arr_fltMixingVol.SetSize( 0);
    file1.SetExtendedProperties( "IMEX=1");
    file1.AddField("PosID", file1_PosID, hslInteger);
    file1.AddField("SampleID", file1_SampleID, hslString, 255);
    file1.AddField("LibraryConc(nM)", file1_DNAconc, hslFloat);
    file1.AddField("IndexPlatePos", file1_IndexPlatePos, hslString, 255);
    if( 0 == file1.Open(i_strFileName + " " + "LibraryPrep$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strFileName, "HxMetEdCompCmd");
    }
    {
      while (
         (file1.Eof() == 0)
      )
      {
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        intLength = StrGetLength(file1_SampleID);
        if (intLength == 0)
        {
          break;
        }
        else
        {
          intDispensePos = file1_PosID + 48;
          strPosition = StrConcat2(intDispensePos, Translate(""));
          o_arr_strDispensePosID.AddAsLast(strPosition);
          strPosition = StrConcat2(file1_PosID, Translate(""));
          o_arr_strSamplePosID.AddAsLast(strPosition);
          fltDiluent = file1_DNAconc * i_fltLibraryVol;
          fltDiluent = fltDiluent / (10 * 1.0);
          fltDiluent = fltDiluent - i_fltLibraryVol;
          fltDiluent = MthRound(fltDiluent, 1);
          fltMixingVol = fltDiluent * 0.9;
          if (fltMixingVol > 50)
          {
            fltMixingVol = 50;
          }
          o_arr_fltDilunetVol.AddAsLast(fltDiluent);
          o_arr_fltMixingVol.AddAsLast(fltMixingVol);
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    o_intSampleNumber=o_arr_strSamplePosID.GetSize();
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("======> Array of Dilunet Volume: "), Translate("======> Array of Mixing Volume: "), o_arr_fltDilunetVol, o_arr_fltMixingVol);
  }
} // library namespace
