#pragma once
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLTipCountingLib.hsl"
#include "HSLML_STARLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "VirtualLabware\\VirtualLabware.hsl"
#include "HSLMthLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLLabwareStateLib.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLTimLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace PIPETTINGCONTROLLER {
  sequence _seqTips50;
  variable _strTipCounter50;
  variable _strTipCounter300;
  sequence _seqTips300;
  variable _strTipCounter1000;
  sequence _seqTips1000;
  variable _intNumberOfChannels;
  sequence seqTipEject;
  function AddBeadsSurface( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_intTipCapacity, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intMixingCycles, variable i_fltMixingVol ) void ;
  function AddDNASurface( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_intMixingCycles, variable i_fltMixingVol ) void ;
  function AddDNA_Dilution( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable & i_arr_fltVolume[], variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_intMixingCycles, variable & i_arr_fltMixingVol[] ) void ;
  function AddDNA_NormalizationAndTransfer( device & ML_STAR, sequence i_seqFrom, sequence i_seqDilution, sequence & i_seqTransfer, variable & i_arr_fltVolume1[], variable i_fltMixingVolume1, variable i_fltTransferVol, variable i_strLiquidClass, variable i_fltAspirationHeight ) void ;
  function AddDiluentToPool( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable & i_arr_fltVolume[], variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight ) void ;
  function AddDiluent_Dilution( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable & i_arr_fltVolume[], variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight ) void ;
  function AddDiluent_Dilution50( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable & i_arr_fltVolume[], variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight ) void ;
  function AddElution( device & ML_STAR, sequence i_seqTemplate, sequence i_seqFrom, sequence i_seqTo, variable i_fltBufferVolume, variable i_strLiquidClass ) void ;
  function AddElutionLIGHT( device & ML_STAR, sequence i_seqTemplate, sequence i_seqFrom, sequence i_seqTo, variable i_fltBufferVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_blnSequenceFromCounting, variable i_intResuspensionCycles, variable i_fltDeltaX, variable i_fltDeltaY ) void ;
  function AddElutionLIGHTAndTransfer( device & ML_STAR, sequence i_seqTemplate, sequence i_seqFrom, sequence i_seqTo, sequence i_seqFinal, variable i_fltBufferVolume, variable i_fltRecoveryVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_blnSequenceFromCounting, variable i_intResuspensionCycles, variable i_fltDeltaX, variable i_fltDeltaY ) void ;
  function AddElutionMIDI( device & ML_STAR, sequence i_seqTemplate, sequence i_seqFrom, sequence i_seqTo, variable i_fltBufferVolume, variable i_strLiquidClass, variable i_blnSequenceFromCounting, variable i_intResuspensionCycles ) void ;
  function AddFragMixSurface( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_intTipCapacity, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_intMixingCycles, variable i_fltMixingVol ) void ;
  function AddIndexSurface( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_intMixingCycles, variable i_fltMixingVol ) void ;
  function AddIndexSurface_Piercing( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVolume, variable i_strLiquidClass, variable i_intMixingCycles, variable i_fltMixingVol ) void ;
  function AddMixJet( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltTipVolume, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDIspensationHeight ) void ;
  function AddMixSurface( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_intTipCapacity, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intMixingCycles, variable i_fltMixingVol ) void ;
  function AddMixSurfaceKeepTips( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_intTipCapacity, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intMixingCycles, variable i_fltMixingVol ) void ;
  function AddMixToIndexes( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVolume, variable i_fltMixingVolume, variable i_strLiquidClass, variable i_fltAspirationHeight ) void ;
  function AddReagentSurface( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_intTipCapacity, variable i_fltReagentVolume, variable i_fltDispensationHeight, variable i_strLiquidClass ) void ;
  function AddStreptavidinSurface( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_intTipCapacity, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intMixingCycles, variable i_fltMixingVol ) void ;
  function AddWashCapture( device & ML_STAR, sequence i_seqTemplate, sequence & i_seqFrom, sequence i_seqTo, variable i_fltBufferVolume, variable i_strLiquidClass, variable i_blnSequenceFromCounting, variable i_intResuspensionCycles, variable i_fltDeltaX, variable i_fltDeltaY ) void ;
  function AddWashJet_KeepFromSequenceUpdated( device & ML_STAR, sequence & i_seqFrom, sequence i_seqTo, variable i_fltTipVolume, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDIspensationHeight ) void ;
  function Aliquot( device & ML_STAR, sequence & i_seqFrom, sequence & i_seqTo, variable i_intTipNumber, variable i_intTipCapacity, variable i_fltAliquotVolume, variable i_fltPreVolume, variable i_fltPostVolume, variable i_intDispensationHeight, variable i_intDispensationHeightPrePost, variable i_strLiquidClass, variable i_strLiquidClassPost, variable i_blnJetPart, variable i_blnConditionTips, variable i_strLiquidClassConditioning ) void ;
  function AliquotBeads( device & ML_STAR, sequence & i_seqFrom, sequence & i_seqTo, variable i_intTipNumber, variable i_intTipCapacity, variable i_fltAliquotVolume, variable i_fltPreVolume, variable i_fltPostVolume, variable i_intDispensationHeight, variable i_intDispensationHeightPrePost, variable i_strLiquidClass, variable i_strLiquidClassPost, variable i_blnJetPart, variable i_blnConditionTips, variable i_strLiquidClassConditioning ) void ;
  function Aliquot_AspirateAll( device & ML_STAR, sequence & i_seqFrom, sequence & i_seqTo, variable i_intTipNumber, variable i_intTipCapacity, variable i_fltAliquotVolume, variable i_fltPreVolume, variable i_fltPostVolume, variable i_intDispensationHeight, variable i_intDispensationHeightPrePost, variable i_strLiquidClass, variable i_strLiquidClassPost, variable i_blnJetPart, variable i_blnConditionTips, variable i_strLiquidClassConditioning ) void ;
  function AssembleCaptureElutionMix( device & ML_STAR, variable i_intNumberOfPool, variable i_fltReagent1Vol, variable i_fltReagent2Vol, sequence i_seqReagent1, sequence i_seqReagent2, sequence i_seqMix ) void ;
  function Init( device & ML_STAR, variable i_strTipCounter50, sequence & i_seqTips50, variable i_strTipCounter300, sequence & i_seqTips300, variable i_strTipCounter1000, sequence & i_seqTips1000, sequence i_seqTipEject ) void ;
  function MixBeads( device & ML_STAR, variable i_intNumberOfTubes, variable i_intNumberOfSamples, variable i_intAliquotVol, sequence i_seqBeads ) void ;
  function MixBeadsOLD( device & ML_STAR, variable i_intNumberOfTubes, variable i_intNumberOfSamples, variable i_intAliquotVol, sequence i_seqBeads ) void ;
  function MixReagent( device & ML_STAR, sequence & i_seqMixing, variable i_intMixingCycles, variable i_fltMixingVol, variable i_fltMixingHeight, variable i_intTipCapacity, variable i_strLiquidClass ) void ;
  function MixSamples( device & ML_STAR, sequence & i_seqMixing, variable i_intMixingCycles, variable i_fltMixingVol, variable i_fltMixingHeight, variable i_intTipCapacity, variable i_strLiquidClass, variable i_fltDeltaX, variable i_fltDeltaY ) void ;
  function MixSamplesAndTransfer( device & ML_STAR, sequence & i_seqMixing, sequence i_seqTo, variable i_intMixingCycles, variable i_fltMixingVol, variable i_fltMixingHeight, variable i_intTipCapacity, variable i_strLiquidClass, variable i_fltDeltaX, variable i_fltDeltaY, variable i_fltAspVolume, variable i_fltAspHeight ) void ;
  function MixWash2Capture( device & ML_STAR, sequence i_seqTemplate, sequence i_seqFrom, sequence i_seqTo, variable i_fltBufferVolume, variable i_strLiquidClass, variable i_blnSequenceFromCounting, variable i_intResuspensionCycles, variable i_fltDeltaX, variable i_fltDeltaY ) void ;
  function PoolDNA( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVolume, variable i_fltMixingVol, variable i_strLiquidClass ) void ;
  function PoolDNAMulti( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable & i_arrFltVolumes[], variable i_strLiquidClass ) void ;
  function PoolDNAMultiVolAndPos( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable & i_arrFltVolumes[], variable i_strLiquidClass ) void ;
  function RemoveDropDown( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVol, variable i_intTipSelection, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_blnDirectTipEject, variable i_fltDeltaX, variable i_fltDeltaY ) void ;
  function RemoveSupernatant( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVol, variable i_intTipSelection, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_blnDirectTipEject, variable i_fltDeltaX, variable i_fltDeltaY ) void ;
  function RemoveSupernatantKeepTips( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVol, variable i_intTipSelection, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight ) void ;
  function RemoveSupernatantMPH( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_blnTipPickUp, sequence i_seqTipToUse, variable i_strChannelPatternMPH, variable i_fltVol, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_blnDirectTipEject, variable i_blnTipEject ) void ;
  function ResuspendBeadsAndTransfer( device & ML_STAR, sequence i_seqTemplate, sequence & i_seqFrom, sequence i_seqTo, sequence i_seqFinal, variable i_fltBufferVolume, variable i_strLiquidClass, variable i_intMixingCycles ) void ;
  function ResuspendBeadsAndTransferCircularMagnet( device & ML_STAR, sequence i_seqTemplate, sequence i_seqFrom, sequence i_seqTo, sequence i_seqFinal, variable i_fltBufferVolume, variable i_strLiquidClass ) void ;
  function ResuspendBeadsAndTransferResuspending( device & ML_STAR, sequence i_seqTemplate, sequence & i_seqFrom, sequence i_seqTo, sequence i_seqFinal, variable i_fltBufferVolume, variable i_strLiquidClass, variable i_intMixingCycles ) void ;
  function ResuspendCaptureBeads( device & ML_STAR, sequence & i_seqMixing, variable i_intMixingCycles, variable i_fltMixingVol, variable i_fltMixingHeight, variable i_intTipCapacity, variable i_strLiquidClass, variable i_fltDeltaX, variable i_fltDeltaY ) void ;
  function TransferDNA( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_intTipType, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_intAspMixingCycles, variable i_fltAspMixingVol, variable i_fltDispHeight, variable i_intDispMixingCycles, variable i_fltDispMixingVol, variable i_blnMAD ) void ;
  function TransferDNAMixing( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_intTipType, variable i_fltVolume, variable i_fltAspHeight, variable i_fltDispHeight, variable i_strLiquidClass, variable i_intMixingCycles, variable i_fltMixingVol ) void ;
  function TransferDNAMixingDouble( device & ML_STAR, sequence i_seqFrom, sequence & i_seqIntermediate, sequence i_seqTo, variable i_intTipType, variable i_fltVolume1, variable i_fltVolume2, variable i_fltAspHeight, variable i_strLiquidClass, variable i_intMixingCycles, variable i_fltMixingVol ) void ;
  function TransferDNAMixingMPH( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVolume, variable i_fltAspHeight, variable i_fltDispHeight, variable i_strLiquidClass, variable i_intMixingCycles, variable i_fltMixingVol, variable i_blnTipPickUp, variable i_blnTipEject, variable i_strChannelPatternMPH, sequence i_seqTipToUse ) void ;
  function TransferElution( device & ML_STAR, sequence i_seqTemplate, sequence i_seqFrom, sequence i_seqTo, variable i_fltVolumeToRemove, variable i_blnKeepPattern, variable i_strLiquidClass, variable i_fltAspirationHeight ) void ;
  function TransferElutionOLD( device & ML_STAR, sequence i_seqTemplate, sequence i_seqFrom, sequence i_seqTo, variable i_fltVolumeToRemove, variable i_blnKeepPattern, variable i_strLiquidClass, variable i_fltAspirationHeight ) void ;
  function TransferSupernatant( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVol, variable i_intTipSelection, variable i_strLiquidClass, variable i_fltAspHeight ) void ;
  function TransferSupernatantKeepTips( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVol, variable i_intTipSelection, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight ) void ;
  private function _DefineChannelPatternsAndArrLiquidClasses( sequence & i_seqControlling, variable & i_arrVolumes[], variable i_index, variable i_strLiquidClass1000, variable i_strLiquidClass300, variable i_strLiquidClass50, variable & o_strChannelPattern1000, variable & o_strChannelPattern300, variable & o_strChannelPattern50, variable & o_arrLiquidClasses[] ) void ;
  private function _ReformatSequenceAndArray_Exclude0( sequence & i_seq, variable & i_arrVolumes[], sequence & o_seq, variable & o_arrVolumes[] ) void ;
  private function _TipPickUp( device & ML_STAR, sequence & i_seqTip, sequence & i_seqController, variable i_tipCounter ) void ;
  private function _TipPickUp_ChannelPattern( device & ML_STAR, sequence & i_seqTip, variable i_strChannelPattern, variable i_tipCounter ) void ;
  private function _editArrChannelPattern( sequence i_seqTemplate, sequence i_seq, variable & o_arrChannelPattern[] ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  private function _TipPickUp( device & ML_STAR, sequence & i_seqTip, sequence & i_seqController, variable i_tipCounter ) void {
    private dialog dialogHandle_1;
    private variable kTip;
    private variable endTipSeq;
    private variable end;
    private variable intTotalTipSeq;
    private variable current;
    private variable intNeededTips;
    private variable intAvailableTips;
    private variable strChannelPattern;
    private variable strTipCarrier;
    private dialog dialogHandle_2;
    if (i_tipCounter == _strTipCounter50)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    else
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    end = i_seqController.GetCount();
    current = i_seqController.GetCurrentPosition();
    if(0){
      strTipCarrier = Translate("Tip_Carrier_0001");
    }
    intNeededTips = end - current;
    intNeededTips = intNeededTips + 1;
    if (intNeededTips > _intNumberOfChannels)
    {
      intNeededTips = _intNumberOfChannels;
    }
    end = i_seqTip.GetCount();
    current = i_seqTip.GetCurrentPosition();
    intAvailableTips = end - current;
    intAvailableTips = intAvailableTips + 1;
    if (current == 0)
    {
      intAvailableTips = 0;
    }
    if (intAvailableTips < intNeededTips)
    {
      {
        while (1 == 1)
        {
          {
            while (1 == 1)
            {
              dialogHandle_2.SetOutput(Translate("Puntali insufficienti, premere ok per accedere alla schermata di load tips"));
              if( 0 == dialogHandle_2.PlaySound("C:\\Windows\\Media\\Windows Exclamation.wav") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              if( 0 == dialogHandle_2.PlaySound("") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if(0){
                ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
              }
              TipCount::Edit2(i_seqTip, i_tipCounter, ML_STAR, 1000);
              endTipSeq = i_seqTip.GetCount();
              if(0){
                ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              }
              if (endTipSeq == 0)
              {
                dialogHandle_1.SetOutput(Translate("E' stato messo 0 come posizione finale dei puntali, correggere"));
                dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              }
              else
              {
                break;
              }
            }
          }
          intTotalTipSeq = SeqGetTotal(i_seqTip);
          if (intTotalTipSeq >= intNeededTips)
          {
            break;
          }
        }
      }
    }
    strChannelPattern = Translate("");
    {
      for(kTip = 0; kTip < _intNumberOfChannels;)
      {
        kTip = kTip + 1;
        if (kTip <= intNeededTips)
        {
          strChannelPattern = StrConcat2(strChannelPattern, 1);
        }
        else
        {
          strChannelPattern = StrConcat2(strChannelPattern, 0);
        }
      }
    }
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    TipCount::Write2(i_seqTip, i_tipCounter, ML_STAR);
  }

  function Init( device & ML_STAR, variable i_strTipCounter50, sequence & i_seqTips50, variable i_strTipCounter300, sequence & i_seqTips300, variable i_strTipCounter1000, sequence & i_seqTips1000, sequence i_seqTipEject ) void {
    private variable strFunctionName;
    strFunctionName=GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("\n---------------------------------------"), strFunctionName, Translate("  Started------------------------------------------\n"), Translate(""));
    _strTipCounter50 = i_strTipCounter50;
    SeqCopySequence(_seqTips50, i_seqTips50);
    _strTipCounter300 = i_strTipCounter300;
    SeqCopySequence(_seqTips300, i_seqTips300);
    _strTipCounter1000 = i_strTipCounter1000;
    SeqCopySequence(_seqTips1000, i_seqTips1000);
    _intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("_intNumberOfChannels_____________"), _intNumberOfChannels);
    TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("\n---------------------------------------"), strFunctionName, Translate("  Completed------------------------------------------\n"), Translate(""));
    SeqCopySequence(seqTipEject, i_seqTipEject);
  }

  private function _TipPickUp_ChannelPattern( device & ML_STAR, sequence & i_seqTip, variable i_strChannelPattern, variable i_tipCounter ) void {
    private dialog dialogHandle_3;
    private dialog dialogHandle_4;
    private variable endTipSeq;
    private variable end;
    private variable intTotalTipSeq;
    private variable intNeededTips;
    private variable current;
    private variable intAvailableTips;
    private variable intLength;
    private variable intLoopCounterChannelPattern;
    private variable i;
    private variable strChannelActive;
    if (i_tipCounter == _strTipCounter50)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    else
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    intLength = StrGetLength(i_strChannelPattern);
    intNeededTips = 0;
    {
      for(intLoopCounterChannelPattern = 0; intLoopCounterChannelPattern < intLength;)
      {
        intLoopCounterChannelPattern = intLoopCounterChannelPattern + 1;
        i = intLoopCounterChannelPattern - 1;
        strChannelActive = StrMid(i_strChannelPattern, i, 1);
        if (strChannelActive == "1")
        {
          intNeededTips = intNeededTips + 1;
        }
      }
    }
    TRACELEVEL::Debug_Trace2(Translate("intNeededTips_________"), intNeededTips);
    end = i_seqTip.GetCount();
    current = i_seqTip.GetCurrentPosition();
    intAvailableTips = end - current;
    intAvailableTips = intAvailableTips + 1;
    if (current == 0)
    {
      intAvailableTips = 0;
    }
    if (intAvailableTips < intNeededTips)
    {
      {
        while (1 == 1)
        {
          {
            while (1 == 1)
            {
              dialogHandle_4.SetOutput(Translate("Puntali insufficienti, premere ok per accedere alla schermata di load tips"));
              if( 0 == dialogHandle_4.PlaySound("C:\\Windows\\Media\\ringout.wav") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              dialogHandle_4.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              if( 0 == dialogHandle_4.PlaySound("") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              TipCount::Edit2(i_seqTip, i_tipCounter, ML_STAR, 1000);
              endTipSeq = i_seqTip.GetCount();
              if (endTipSeq == 0)
              {
                dialogHandle_3.SetOutput(Translate("E' stato messo 0 come posizione finale dei puntali, correggere"));
                dialogHandle_3.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              }
              else
              {
                break;
              }
            }
          }
          intTotalTipSeq = SeqGetTotal(i_seqTip);
          if (intTotalTipSeq >= intNeededTips)
          {
            break;
          }
        }
      }
    }
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    TipCount::Write2(i_seqTip, i_tipCounter, ML_STAR);
  }

  private function _DefineChannelPatternsAndArrLiquidClasses( sequence & i_seqControlling, variable & i_arrVolumes[], variable i_index, variable i_strLiquidClass1000, variable i_strLiquidClass300, variable i_strLiquidClass50, variable & o_strChannelPattern1000, variable & o_strChannelPattern300, variable & o_strChannelPattern50, variable & o_arrLiquidClasses[] ) void {
    private variable end;
    private variable intIndexPattern;
    private variable intPositions;
    private variable intLoopCounterPattern;
    private variable current;
    o_strChannelPattern1000 = 0;
    o_strChannelPattern300 = 0;
    o_strChannelPattern50 = 0;
    o_arrLiquidClasses.SetSize( 0);
    end = i_seqControlling.GetCount();
    current = i_seqControlling.GetCurrentPosition();
    intPositions = end - current;
    intPositions = intPositions + 1;
    o_strChannelPattern50 = Translate("");
    o_strChannelPattern300 = Translate("");
    o_strChannelPattern1000 = Translate("");
    intIndexPattern = i_index;
    o_arrLiquidClasses.SetSize(0);
    {
      for(intLoopCounterPattern = 0; intLoopCounterPattern < 8;)
      {
        intLoopCounterPattern = intLoopCounterPattern + 1;
        if (intLoopCounterPattern <= intPositions)
        {
          if (i_arrVolumes.ElementAt( intIndexPattern -1) <= 50)
          {
            o_strChannelPattern50 = StrConcat2(o_strChannelPattern50, 1);
            o_strChannelPattern300 = StrConcat2(o_strChannelPattern300, 0);
            o_strChannelPattern1000 = StrConcat2(o_strChannelPattern1000, 0);
            o_arrLiquidClasses.AddAsLast(i_strLiquidClass50);
          }
          else
          {
            if (i_arrVolumes.ElementAt( intIndexPattern -1) <= 300)
            {
              o_strChannelPattern50 = StrConcat2(o_strChannelPattern50, 0);
              o_strChannelPattern300 = StrConcat2(o_strChannelPattern300, 1);
              o_strChannelPattern1000 = StrConcat2(o_strChannelPattern1000, 0);
              o_arrLiquidClasses.AddAsLast(i_strLiquidClass300);
            }
            else
            {
              o_strChannelPattern50 = StrConcat2(o_strChannelPattern50, 0);
              o_strChannelPattern300 = StrConcat2(o_strChannelPattern300, 0);
              o_strChannelPattern1000 = StrConcat2(o_strChannelPattern1000, 1);
              o_arrLiquidClasses.AddAsLast(i_strLiquidClass1000);
            }
          }
        }
        else
        {
          o_strChannelPattern50 = StrConcat2(o_strChannelPattern50, 0);
          o_strChannelPattern300 = StrConcat2(o_strChannelPattern300, 0);
          o_strChannelPattern1000 = StrConcat2(o_strChannelPattern1000, 0);
        }
        intIndexPattern = intIndexPattern + 1;
      }
    }
    TRACELEVEL::Debug_Trace2(Translate("o_strChannelPattern50__________"), o_strChannelPattern50);
    TRACELEVEL::Debug_Trace2(Translate("o_strChannelPattern300__________"), o_strChannelPattern300);
    TRACELEVEL::Debug_Trace2(Translate("o_strChannelPattern1000__________"), o_strChannelPattern1000);
    TRACELEVEL::Debug_TraceArray(o_arrLiquidClasses, Translate("o_arrLiquidClasses_______"));
  }

  function AddDiluent_Dilution( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable & i_arr_fltVolume[], variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight ) void {
    private variable intIndex;
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    _TipPickUp(ML_STAR, _seqTips300, i_seqTo, _strTipCounter300);
    intIndex = 1;
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        if (i_fltAspHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (i_fltDispHeight == -1)
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        intIndex = intIndex + _intNumberOfChannels;
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  }

  private function _editArrChannelPattern( sequence i_seqTemplate, sequence i_seq, variable & o_arrChannelPattern[] ) void {
    private variable blnPresent;
    private variable m;
    private variable n;
    private variable strChannelPattern;
    private variable strPositionIDTemplate;
    private variable strPositionID;
    private variable intNumberOfLoops;
    private variable intLoopCounterChannel;
    private variable intNotUsedChannels;
    o_arrChannelPattern.SetSize( 0);
    intNumberOfLoops = 96 / (_intNumberOfChannels * 1.0);
    intNotUsedChannels = 8 - _intNumberOfChannels;
    {
      for(m = 0; m < intNumberOfLoops;)
      {
        m = m + 1;
        strChannelPattern = StrConcat2(Translate(""), Translate(""));
        {
          for(n = 0; n < _intNumberOfChannels;)
          {
            n = n + 1;
            strPositionIDTemplate = SeqGetPositionId(i_seqTemplate);
            blnPresent = 0;
            {
              while (
                 (i_seq.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, i_seq, 1);
                strPositionID = SeqGetPositionId(i_seq);
                if (strPositionID == strPositionIDTemplate)
                {
                  blnPresent = 1;
                  break;
                }
                SeqIncrement(i_seq, 1);
                if (
                   (i_seq.GetCurrentPosition() > 0 && i_seq.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              i_seq.SetMax(i_seq.GetTotal());
              i_seq.SetCurrentPosition(1);
            }
            if (blnPresent == 1)
            {
              strChannelPattern = StrConcat2(strChannelPattern, 1);
            }
            else
            {
              strChannelPattern = StrConcat2(strChannelPattern, 0);
            }
            SeqIncrement(i_seqTemplate, 1);
          }
        }
        {
          for(intLoopCounterChannel = 0; intLoopCounterChannel < intNotUsedChannels;)
          {
            intLoopCounterChannel = intLoopCounterChannel + 1;
            strChannelPattern = StrConcat2(strChannelPattern, 0);
          }
        }
        o_arrChannelPattern.AddAsLast(strChannelPattern);
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("o_arrChannelPattern________"), o_arrChannelPattern);
  }

  function AddElution( device & ML_STAR, sequence i_seqTemplate, sequence i_seqFrom, sequence i_seqTo, variable i_fltBufferVolume, variable i_strLiquidClass ) void {
    private variable arr_ChannelPattern[];
    private variable intLoopCounterBuffer;
    private variable blnOdd;
    private variable intModule4;
    private variable fltMixingVolume(0);
    _editArrChannelPattern(i_seqTemplate, i_seqTo, arr_ChannelPattern);
    {
      intLoopCounterBuffer = 0;
      while (
         (i_seqTemplate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTemplate, 1);
        intLoopCounterBuffer = intLoopCounterBuffer + 1;
        intModule4=intLoopCounterBuffer%2;
        if (intModule4==1||intModule4==2)
        blnOdd=1;
        else
        blnOdd=0;
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("blnOdd___________"), blnOdd);
        if (arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1) != "00000000")
        {
          if (i_fltBufferVolume > 40)
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter300);
          }
          else
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips50, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter50);
          }
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 0.8, -0.5, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -0.8, -0.5, 0);
          }
          fltMixingVolume = i_fltBufferVolume*0.7;
          Trace (fltMixingVolume);
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -0.8, 0.5, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 0.8, 0.5, 0);
          }
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 0.8, -0.5, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -0.8, -0.5, 0);
          }
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -0.8, 0.5, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 0.8, 0.5, 0);
          }
        }
        SeqIncrement(i_seqTemplate, _intNumberOfChannels);
        if (
           (i_seqTemplate.GetCurrentPosition() > 0 && i_seqTemplate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTemplate.SetMax(i_seqTemplate.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTemplate.SetCurrentPosition(1);
    }
  }

  function TransferElutionOLD( device & ML_STAR, sequence i_seqTemplate, sequence i_seqFrom, sequence i_seqTo, variable i_fltVolumeToRemove, variable i_blnKeepPattern, variable i_strLiquidClass, variable i_fltAspirationHeight ) void {
    private variable arr_ChannelPattern[];
    private variable intLoopCounterRemoveBuffer;
    private variable blnOdd;
    private variable intModule4;
    private variable blnLiquidFollowing;
    private variable strChannelPattern;
    if (i_fltAspirationHeight <= 1)
    {
      blnLiquidFollowing = 0;
    }
    else
    {
      blnLiquidFollowing = 1;
    }
    if(0){
      _editArrChannelPattern(i_seqTemplate, i_seqFrom, arr_ChannelPattern);
    }
    strChannelPattern = Translate("10000000");
    {
      intLoopCounterRemoveBuffer = 0;
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqTemplate, 1, i_seqTo, 1);
        intLoopCounterRemoveBuffer = intLoopCounterRemoveBuffer + 1;
        intModule4=intLoopCounterRemoveBuffer%4;
        if (intModule4==1||intModule4==2)
        blnOdd=1;
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("blnOdd___________"), blnOdd);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(" Loop Counter   "), intLoopCounterRemoveBuffer);
        if (blnOdd == 1)
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, 0, 0);
        }
        else
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, 0, 0);
        }
        if (i_fltVolumeToRemove > 50)
        {
          _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, strChannelPattern, _strTipCounter300);
        }
        else
        {
          _TipPickUp_ChannelPattern(ML_STAR, _seqTips50, strChannelPattern, _strTipCounter50);
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        if(0){
          if (arr_ChannelPattern.ElementAt( intLoopCounterRemoveBuffer -1) != "00000000")
          {
            if (i_fltVolumeToRemove > 50)
            {
              _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, arr_ChannelPattern.ElementAt( intLoopCounterRemoveBuffer -1), _strTipCounter300);
            }
            else
            {
              _TipPickUp_ChannelPattern(ML_STAR, _seqTips50, arr_ChannelPattern.ElementAt( intLoopCounterRemoveBuffer -1), _strTipCounter50);
            }
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
        }
        if (blnOdd == 1)
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, 0, 0);
        }
        else
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, 0, 0);
        }
        if (i_blnKeepPattern == 1)
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        SeqIncrement(i_seqTemplate, _intNumberOfChannels);
        if (i_blnKeepPattern == 1)
        {
          SeqIncrement(i_seqTo, _intNumberOfChannels);
        }
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqTemplate.SetMax(i_seqTemplate.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqTemplate.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
  }

  function AddMixJet( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltTipVolume, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDIspensationHeight ) void {
    if (i_fltTipVolume == 50)
    {
      _TipPickUp(ML_STAR, _seqTips50, i_seqTo, _strTipCounter50);
    }
    else
    {
      _TipPickUp(ML_STAR, _seqTips300, i_seqTo, _strTipCounter300);
    }
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        if (i_fltAspirationHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }

  private function _ReformatSequenceAndArray_Exclude0( sequence & i_seq, variable & i_arrVolumes[], sequence & o_seq, variable & o_arrVolumes[] ) void {
    private variable intLoopCounterSequence;
    private variable strLabwareID;
    private variable fltVolume;
    private variable strPositionID;
    { sequence __temp; o_seq = __temp; }
    o_arrVolumes.SetSize( 0);
    {
      intLoopCounterSequence = 0;
      while (
         (i_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seq, 1);
        intLoopCounterSequence = intLoopCounterSequence + 1;
        strLabwareID = SeqGetLabwareId(i_seq);
        strPositionID = SeqGetPositionId(i_seq);
        fltVolume=i_arrVolumes.GetAt(intLoopCounterSequence-1);
        if (fltVolume > 0)
        {
          SeqAdd(o_seq, strLabwareID, strPositionID);
          o_arrVolumes.AddAsLast(fltVolume);
        }
        SeqIncrement(i_seq, 1);
        if (
           (i_seq.GetCurrentPosition() > 0 && i_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seq.SetMax(i_seq.GetTotal());
      i_seq.SetCurrentPosition(1);
    }
    o_seq.SetCurrentPosition(1);
  }

  function AddDNA_Dilution( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable & i_arr_fltVolume[], variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_intMixingCycles, variable & i_arr_fltMixingVol[] ) void {
    private variable intIndex;
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    intIndex = 1;
    {
      while (
         (i_seqFrom.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        _TipPickUp(ML_STAR, _seqTips50, i_seqFrom, _strTipCounter50);
        if (i_fltAspHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        intIndex = intIndex + _intNumberOfChannels;
        if (
           (i_seqFrom.GetCurrentPosition() > 0 && i_seqFrom.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  }

  function AddMixSurface( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_intTipCapacity, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intMixingCycles, variable i_fltMixingVol ) void {
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        if (i_intTipCapacity == 50)
        {
          _TipPickUp(ML_STAR, _seqTips50, i_seqTo, _strTipCounter50);
        }
        else
        {
          _TipPickUp(ML_STAR, _seqTips300, i_seqTo, _strTipCounter300);
        }
        if (i_fltAspirationHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (i_fltDispenseHeight == -1)
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  }

  function AddMixToIndexes( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVolume, variable i_fltMixingVolume, variable i_strLiquidClass, variable i_fltAspirationHeight ) void {
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        _TipPickUp(ML_STAR, _seqTips50, i_seqTo, _strTipCounter50);
        if (i_fltAspirationHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
  }

  function TransferDNA( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_intTipType, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_intAspMixingCycles, variable i_fltAspMixingVol, variable i_fltDispHeight, variable i_intDispMixingCycles, variable i_fltDispMixingVol, variable i_blnMAD ) void {
    if (i_blnMAD == 1)
    {
      HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    }
    {
      while (
         (i_seqFrom.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        if (i_intTipType == 50)
        {
          _TipPickUp(ML_STAR, _seqTips50, i_seqTo, _strTipCounter50);
        }
        if (i_intTipType == 300)
        {
          _TipPickUp(ML_STAR, _seqTips300, i_seqTo, _strTipCounter300);
        }
        if (i_fltAspHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (i_fltDispHeight == -1)
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqFrom.GetCurrentPosition() > 0 && i_seqFrom.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    if (i_blnMAD == 1)
    {
      HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    }
  }

  function AddDNA_NormalizationAndTransfer( device & ML_STAR, sequence i_seqFrom, sequence i_seqDilution, sequence & i_seqTransfer, variable & i_arr_fltVolume1[], variable i_fltMixingVolume1, variable i_fltTransferVol, variable i_strLiquidClass, variable i_fltAspirationHeight ) void {
    private variable intIndex;
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    intIndex = 1;
    {
      while (
         (i_seqFrom.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqDilution, 1, i_seqTransfer, 1);
        _TipPickUp(ML_STAR, _seqTips50, i_seqFrom, _strTipCounter50);
        if (i_fltAspirationHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        intIndex = intIndex + _intNumberOfChannels;
        if (
           (i_seqFrom.GetCurrentPosition() > 0 && i_seqFrom.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqDilution.SetMax(i_seqDilution.GetTotal());
      i_seqTransfer.SetMax(i_seqTransfer.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqDilution.SetCurrentPosition(1);
      i_seqTransfer.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  }

  function AddDNASurface( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_intMixingCycles, variable i_fltMixingVol ) void {
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        _TipPickUp(ML_STAR, _seqTips50, i_seqTo, _strTipCounter50);
        if (i_fltAspirationHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
  }

  function MixBeadsOLD( device & ML_STAR, variable i_intNumberOfTubes, variable i_intNumberOfSamples, variable i_intAliquotVol, sequence i_seqBeads ) void {
    private variable strChannelPattern;
    private variable loopCounter1;
    private variable fltBeadsVol;
    private variable fltMixingVol;
    private variable strLiquidClass;
    strChannelPattern = Translate("");
    i_seqBeads.SetCount(i_intNumberOfTubes);
    {
      for(loopCounter1 = 0; loopCounter1 < 8;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 <= i_intNumberOfTubes)
        {
          strChannelPattern = StrConcat2(strChannelPattern, Translate("1"));
        }
        else
        {
          strChannelPattern = StrConcat2(strChannelPattern, Translate("0"));
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("strChannelPattern: "), strChannelPattern);
    fltBeadsVol = i_intAliquotVol * i_intNumberOfSamples;
    fltBeadsVol = i_intAliquotVol / (i_intNumberOfTubes * 1.0);
    fltMixingVol = fltBeadsVol * 0.8;
    if (fltMixingVol > 1000)
    {
      fltMixingVol = 1000;
    }
    if (fltMixingVol <= 300)
    {
      strLiquidClass = Translate("StandardVolumeFilter_Water_DispenseSurface_Empty");
      _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, strChannelPattern, _strTipCounter300);
    }
    else
    {
      strLiquidClass = Translate("HighVolumeFilter_Water_DispenseSurface_Empty");
      _TipPickUp_ChannelPattern(ML_STAR, _seqTips1000, strChannelPattern, _strTipCounter1000);
    }
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }

  function RemoveSupernatant( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVol, variable i_intTipSelection, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_blnDirectTipEject, variable i_fltDeltaX, variable i_fltDeltaY ) void {
    private variable intLoopCounterBuffer;
    private variable blnOdd;
    private variable intModule4;
    private variable fltOddX;
    private variable fltEvenX;
    private variable fltReturnY;
    {
      intLoopCounterBuffer = 0;
      while (
         (i_seqFrom.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        intLoopCounterBuffer = intLoopCounterBuffer + 1;
        intModule4=intLoopCounterBuffer%2;
        if (intModule4==1||intModule4==2)
        {
          blnOdd=1;
        }
        else
        {
          blnOdd=0;
        }
        fltOddX = i_fltDeltaX;
        fltEvenX = -1*fltOddX;
        fltReturnY = -1*i_fltDeltaY;
        Trace ("OddX= ", fltOddX);
        Trace ("EvenX= ", fltEvenX);
        Trace ("DeltaY= ", i_fltDeltaY);
        Trace ("ReturnY= ", fltReturnY);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("blnOdd___________"), blnOdd);
        if (i_intTipSelection == 1000)
        {
          _TipPickUp(ML_STAR, _seqTips1000, i_seqFrom, _strTipCounter1000);
        }
        if (i_intTipSelection == 300)
        {
          _TipPickUp(ML_STAR, _seqTips300, i_seqFrom, _strTipCounter300);
        }
        if (i_intTipSelection == 50)
        {
          _TipPickUp(ML_STAR, _seqTips50, i_seqFrom, _strTipCounter50);
        }
        if (blnOdd == 1)
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqFrom, fltOddX, i_fltDeltaY, 0);
        }
        else
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqFrom, fltEvenX, i_fltDeltaY, 0);
        }
        TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, i_seqFrom, 1);
        if (i_fltAspHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (blnOdd == 1)
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqFrom, fltEvenX, fltReturnY, 0);
        }
        else
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqFrom, fltOddX, fltReturnY, 0);
        }
        TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, i_seqFrom, 1);
        if (i_blnDirectTipEject == 0)
        {
          if (i_fltDispHeight == -1)
          {
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          else
          {
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        SeqIncrement(i_seqFrom, _intNumberOfChannels);
        if (
           (i_seqFrom.GetCurrentPosition() > 0 && i_seqFrom.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
  }

  function TransferDNAMixing( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_intTipType, variable i_fltVolume, variable i_fltAspHeight, variable i_fltDispHeight, variable i_strLiquidClass, variable i_intMixingCycles, variable i_fltMixingVol ) void {
    {
      while (
         (i_seqFrom.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        if (i_intTipType == 50)
        {
          _TipPickUp(ML_STAR, _seqTips50, i_seqTo, _strTipCounter50);
        }
        else
        {
          _TipPickUp(ML_STAR, _seqTips300, i_seqTo, _strTipCounter300);
        }
        if (i_fltAspHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (i_fltDispHeight == -1)
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqFrom.GetCurrentPosition() > 0 && i_seqFrom.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
  }

  function PoolDNA( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVolume, variable i_fltMixingVol, variable i_strLiquidClass ) void {
    private variable LoopCounter1;
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    {
      LoopCounter1 = 0;
      while (
         (i_seqFrom.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        LoopCounter1 = LoopCounter1 + 1;
        _TipPickUp(ML_STAR, _seqTips50, i_seqFrom, _strTipCounter50);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        if (LoopCounter1 <= 2)
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqFrom.GetCurrentPosition() > 0 && i_seqFrom.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  }

  function TransferSupernatant( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVol, variable i_intTipSelection, variable i_strLiquidClass, variable i_fltAspHeight ) void {
    {
      while (
         (i_seqFrom.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        if (i_intTipSelection == 300)
        {
          _TipPickUp(ML_STAR, _seqTips300, i_seqFrom, _strTipCounter300);
        }
        else
        {
          _TipPickUp(ML_STAR, _seqTips50, i_seqFrom, _strTipCounter50);
        }
        if (i_fltAspHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqFrom.GetCurrentPosition() > 0 && i_seqFrom.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
  }

  function AddIndexSurface( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_intMixingCycles, variable i_fltMixingVol ) void {
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        _TipPickUp(ML_STAR, _seqTips50, i_seqTo, _strTipCounter50);
        if (i_fltAspirationHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  }

  function AddElutionLIGHT( device & ML_STAR, sequence i_seqTemplate, sequence i_seqFrom, sequence i_seqTo, variable i_fltBufferVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_blnSequenceFromCounting, variable i_intResuspensionCycles, variable i_fltDeltaX, variable i_fltDeltaY ) void {
    private variable intModule4;
    private variable intLoopCounterBuffer;
    private variable fltMixingVolume;
    private variable blnOdd;
    private variable arr_ChannelPattern[];
    private variable loopCounter1;
    private variable fltOddX;
    private variable fltEvenX;
    private variable fltReturnY;
    _editArrChannelPattern(i_seqTemplate, i_seqTo, arr_ChannelPattern);
    {
      intLoopCounterBuffer = 0;
      while (
         (i_seqTemplate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTemplate, 1);
        intLoopCounterBuffer = intLoopCounterBuffer + 1;
        intModule4=intLoopCounterBuffer%2;
        if (intModule4==1||intModule4==2)
        {
          blnOdd=1;
        }
        else
        {
          blnOdd=0;
        }
        fltOddX = i_fltDeltaX;
        fltEvenX = -1*fltOddX;
        fltReturnY = -1*i_fltDeltaY;
        Trace ("OddX= ", fltOddX);
        Trace ("EvenX= ", fltEvenX);
        Trace ("DeltaY= ", i_fltDeltaY);
        Trace ("ReturnY= ", fltReturnY);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("blnOdd___________"), blnOdd);
        if (arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1) != "00000000")
        {
          if (i_fltBufferVolume > 50)
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter300);
          }
          else
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips50, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter50);
          }
          HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
          if (i_fltAspHeight == -1)
          {
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          else
          {
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, fltOddX, i_fltDeltaY, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, fltEvenX, i_fltDeltaY, 0);
          }
          fltMixingVolume = i_fltBufferVolume*0.7;
          Trace (fltMixingVolume);
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, fltEvenX, fltReturnY, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, fltOddX, fltReturnY, 0);
          }
          {
            for(loopCounter1 = 0; loopCounter1 < i_intResuspensionCycles;)
            {
              loopCounter1 = loopCounter1 + 1;
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              if (blnOdd == 1)
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, fltOddX, fltReturnY, 0);
              }
              else
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, fltEvenX, fltReturnY, 0);
              }
              fltMixingVolume = i_fltBufferVolume*0.7;
              Trace (fltMixingVolume);
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              if (blnOdd == 1)
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, fltEvenX, i_fltDeltaY, 0);
              }
              else
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, fltOddX, i_fltDeltaY, 0);
              }
            }
          }
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        SeqIncrement(i_seqTemplate, _intNumberOfChannels);
        if (
           (i_seqTemplate.GetCurrentPosition() > 0 && i_seqTemplate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTemplate.SetMax(i_seqTemplate.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTemplate.SetCurrentPosition(1);
    }
  }

  function AliquotBeads( device & ML_STAR, sequence & i_seqFrom, sequence & i_seqTo, variable i_intTipNumber, variable i_intTipCapacity, variable i_fltAliquotVolume, variable i_fltPreVolume, variable i_fltPostVolume, variable i_intDispensationHeight, variable i_intDispensationHeightPrePost, variable i_strLiquidClass, variable i_strLiquidClassPost, variable i_blnJetPart, variable i_blnConditionTips, variable i_strLiquidClassConditioning ) void {
    private variable fltNumberOfFullCycles;
    private variable intLoopCounterAliquot;
    private variable intNumberOfRemainingWells1;
    private variable fltTipCapacityReduced;
    private variable fltMaxNumberOfAliquotInTip;
    private variable intCurrentPosition;
    private variable blnTipsConditioningNeeded;
    private variable intRetractDistance;
    private variable fltAliquotsInTips;
    private variable intDispenseMode;
    private variable intAliquotsInTipsPlus1;
    private variable retValDisp;
    private variable intNumberOfFullCycles;
    private variable intTotalWells;
    private variable retValAsp;
    private variable fltVolumeToAspirate;
    private variable intEndPosition;
    private variable strCannelPattern;
    private variable mod;
    private variable intMaxNumberOfAliquotInTip;
    private variable intLoopCounterFullCycles;
    private variable intMaxNumberOfAliquotInAllTips;
    private variable intAliquotsInTips;
    private variable intLoopCounterChannel;
    private variable intLiquidFollowing;
    private variable arrAliquotsInTips[];
    private variable arrVolumesInTips[];
    if (i_blnConditionTips == 1)
    {
      blnTipsConditioningNeeded = 1;
    }
    if (i_blnJetPart == 1)
    {
      intDispenseMode = 0;
      intRetractDistance = 0;
      intLiquidFollowing = 0;
    }
    else
    {
      intDispenseMode = 2;
      intRetractDistance = 5;
      intLiquidFollowing = 1;
    }
    strCannelPattern = Translate("");
    {
      for(intLoopCounterChannel = 0; intLoopCounterChannel < 8;)
      {
        intLoopCounterChannel = intLoopCounterChannel + 1;
        if (intLoopCounterChannel <= i_intTipNumber)
        {
          strCannelPattern = StrConcat2(strCannelPattern, Translate("1"));
        }
        else
        {
          strCannelPattern = StrConcat2(strCannelPattern, Translate("0"));
        }
      }
    }
    if (i_intTipCapacity == 50)
    {
      _TipPickUp_ChannelPattern(ML_STAR, _seqTips50, strCannelPattern, _strTipCounter50);
    }
    if (i_intTipCapacity == 300)
    {
      _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, strCannelPattern, _strTipCounter300);
    }
    if (i_intTipCapacity == 1000)
    {
      _TipPickUp_ChannelPattern(ML_STAR, _seqTips1000, strCannelPattern, _strTipCounter1000);
    }
    intEndPosition = i_seqTo.GetCount();
    intCurrentPosition = i_seqTo.GetCurrentPosition();
    intTotalWells = intEndPosition - intCurrentPosition;
    intTotalWells = intTotalWells + 1;
    fltTipCapacityReduced = i_intTipCapacity - i_fltPreVolume;
    fltTipCapacityReduced = fltTipCapacityReduced - i_fltPostVolume;
    fltMaxNumberOfAliquotInTip = fltTipCapacityReduced / (i_fltAliquotVolume * 1.0);
    intMaxNumberOfAliquotInTip = MthFloor(fltMaxNumberOfAliquotInTip);
    intMaxNumberOfAliquotInAllTips = intMaxNumberOfAliquotInTip * i_intTipNumber;
    fltNumberOfFullCycles = intTotalWells / (intMaxNumberOfAliquotInAllTips * 1.0);
    intNumberOfFullCycles = MthFloor(fltNumberOfFullCycles);
    arrAliquotsInTips.SetSize(0);
    arrVolumesInTips.SetSize(0);
    {
      for(intLoopCounterChannel = 0; intLoopCounterChannel < 8;)
      {
        intLoopCounterChannel = intLoopCounterChannel + 1;
        if (intLoopCounterChannel <= i_intTipNumber)
        {
          arrAliquotsInTips.AddAsLast(intMaxNumberOfAliquotInTip);
          fltVolumeToAspirate = i_fltAliquotVolume * intMaxNumberOfAliquotInTip;
          fltVolumeToAspirate = fltVolumeToAspirate + i_fltPreVolume;
          fltVolumeToAspirate = fltVolumeToAspirate + i_fltPostVolume;
          arrVolumesInTips.AddAsLast(fltVolumeToAspirate);
        }
        else
        {
          arrAliquotsInTips.AddAsLast(0);
          arrVolumesInTips.AddAsLast(0);
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("intTotalWells________"), intTotalWells);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("fltMaxNumberOfAliquotInTip________"), fltMaxNumberOfAliquotInTip);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("intMaxNumberOfAliquotInTip________"), intMaxNumberOfAliquotInTip);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("intNumberOfFullCycles________"), intNumberOfFullCycles);
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("arrAliquotsInTips__________"), Translate("arrVolumesInTips__________"), arrAliquotsInTips, arrVolumesInTips);
    if (intNumberOfFullCycles > 0)
    {
      if (blnTipsConditioningNeeded == 1)
      {
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	retValAsp = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	retValDisp = arrRetValues[2];
        }
        blnTipsConditioningNeeded = 0;
      }
    }
    {
      for(intLoopCounterFullCycles = 0; intLoopCounterFullCycles < intNumberOfFullCycles;)
      {
        intLoopCounterFullCycles = intLoopCounterFullCycles + 1;
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	retValAsp = arrRetValues[2];
        }
        TRACELEVEL::Debug_Trace2(Translate("retValAsp______________"), retValAsp);
        if (i_intDispensationHeightPrePost != -1)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            	retValDisp = arrRetValues[2];
          }
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            	retValDisp = arrRetValues[2];
          }
        }
        TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
        {
          for(intLoopCounterAliquot = 0; intLoopCounterAliquot < intMaxNumberOfAliquotInTip;)
          {
            intLoopCounterAliquot = intLoopCounterAliquot + 1;
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	retValDisp = arrRetValues[2];
            }
            TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
          }
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	retValDisp = arrRetValues[2];
        }
        TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
      }
    }
    intNumberOfRemainingWells1 = intTotalWells % intMaxNumberOfAliquotInAllTips;
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("intNumberOfRemainingWells after full cycles________"), intNumberOfRemainingWells1);
    arrAliquotsInTips.SetSize(0);
    arrVolumesInTips.SetSize(0);
    fltAliquotsInTips = intNumberOfRemainingWells1 / (i_intTipNumber * 1.0);
    intAliquotsInTips = MthFloor(fltAliquotsInTips);
    intAliquotsInTipsPlus1 = intAliquotsInTips + 1;
    mod = intNumberOfRemainingWells1 % i_intTipNumber;
    strCannelPattern = Translate("");
    {
      for(intLoopCounterChannel = 0; intLoopCounterChannel < 8;)
      {
        intLoopCounterChannel = intLoopCounterChannel + 1;
        if (intLoopCounterChannel <= i_intTipNumber)
        {
          if (intLoopCounterChannel <= mod)
          {
            arrAliquotsInTips.AddAsLast(intAliquotsInTipsPlus1);
            fltVolumeToAspirate = i_fltAliquotVolume * intAliquotsInTipsPlus1;
            fltVolumeToAspirate = fltVolumeToAspirate + i_fltPreVolume;
            fltVolumeToAspirate = fltVolumeToAspirate + i_fltPostVolume;
            arrVolumesInTips.AddAsLast(fltVolumeToAspirate);
            strCannelPattern = StrConcat2(strCannelPattern, Translate("1"));
          }
          else
          {
            arrAliquotsInTips.AddAsLast(intAliquotsInTips);
            fltVolumeToAspirate = i_fltAliquotVolume * intAliquotsInTips;
            if (intAliquotsInTips > 0)
            {
              fltVolumeToAspirate = fltVolumeToAspirate + i_fltPreVolume;
              fltVolumeToAspirate = fltVolumeToAspirate + i_fltPostVolume;
              strCannelPattern = StrConcat2(strCannelPattern, Translate("1"));
            }
            else
            {
              strCannelPattern = StrConcat2(strCannelPattern, Translate("0"));
            }
            arrVolumesInTips.AddAsLast(fltVolumeToAspirate);
          }
        }
        else
        {
          arrAliquotsInTips.AddAsLast(0);
          arrVolumesInTips.AddAsLast(0);
          strCannelPattern = StrConcat2(strCannelPattern, Translate("0"));
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("strCannelPattern_______"), strCannelPattern);
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("arrAliquotsInTips__________"), Translate("arrVolumesInTips__________"), arrAliquotsInTips, arrVolumesInTips);
    if (blnTipsConditioningNeeded == 1)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        	retValAsp = arrRetValues[2];
      }
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	retValDisp = arrRetValues[2];
      }
      blnTipsConditioningNeeded = 0;
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      	retValAsp = arrRetValues[2];
    }
    TRACELEVEL::Debug_Trace2(Translate("retValAsp______________"), retValAsp);
    if (i_intDispensationHeightPrePost != -1)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	retValDisp = arrRetValues[2];
      }
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	retValDisp = arrRetValues[2];
      }
    }
    TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqTo, 1);
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	retValDisp = arrRetValues[2];
        }
        TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
        SeqIncrement(i_seqTo, i_intTipNumber);
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqTo.SetCurrentPosition(1);
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      	retValDisp = arrRetValues[2];
    }
    TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }

  function AddReagentSurface( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_intTipCapacity, variable i_fltReagentVolume, variable i_fltDispensationHeight, variable i_strLiquidClass ) void {
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        if (i_intTipCapacity == 50)
        {
          _TipPickUp(ML_STAR, _seqTips50, i_seqFrom, _strTipCounter50);
        }
        if (i_intTipCapacity == 300)
        {
          _TipPickUp(ML_STAR, _seqTips300, i_seqFrom, _strTipCounter300);
        }
        if (i_intTipCapacity == 1000)
        {
          _TipPickUp(ML_STAR, _seqTips1000, i_seqFrom, _strTipCounter1000);
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  }

  function MixReagent( device & ML_STAR, sequence & i_seqMixing, variable i_intMixingCycles, variable i_fltMixingVol, variable i_fltMixingHeight, variable i_intTipCapacity, variable i_strLiquidClass ) void {
    private timer timer1;
    if (i_intTipCapacity == 50)
    {
      _TipPickUp(ML_STAR, _seqTips50, i_seqMixing, _strTipCounter50);
    }
    if (i_intTipCapacity == 300)
    {
      _TipPickUp(ML_STAR, _seqTips300, i_seqMixing, _strTipCounter300);
    }
    if (i_intTipCapacity == 1000)
    {
      _TipPickUp(ML_STAR, _seqTips1000, i_seqMixing, _strTipCounter1000);
    }
    {
      while (
         (i_seqMixing.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqMixing, 1);
        if (i_fltMixingHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if( 0 == timer1.SetTimer(2) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (i_seqMixing.GetCurrentPosition() > 0 && i_seqMixing.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqMixing.SetMax(i_seqMixing.GetTotal());
      i_seqMixing.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }

  function RemoveSupernatantKeepTips( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVol, variable i_intTipSelection, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight ) void {
    if (i_intTipSelection == 300)
    {
      _TipPickUp(ML_STAR, _seqTips300, i_seqFrom, _strTipCounter300);
    }
    else
    {
      _TipPickUp(ML_STAR, _seqTips50, i_seqFrom, _strTipCounter50);
    }
    {
      while (
         (i_seqFrom.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        if (i_fltAspHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (i_seqFrom.GetCurrentPosition() > 0 && i_seqFrom.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }

  function ResuspendBeadsAndTransferCircularMagnet( device & ML_STAR, sequence i_seqTemplate, sequence i_seqFrom, sequence i_seqTo, sequence i_seqFinal, variable i_fltBufferVolume, variable i_strLiquidClass ) void {
    private variable intLoopCounterBuffer;
    private variable fltMixingVolume;
    private variable arr_ChannelPattern[];
    _editArrChannelPattern(i_seqTemplate, i_seqTo, arr_ChannelPattern);
    fltMixingVolume = i_fltBufferVolume*0.8;
    Trace (fltMixingVolume);
    {
      intLoopCounterBuffer = 0;
      while (
         (i_seqTemplate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTemplate, 1, i_seqFinal, 1, i_seqTo, 1);
        intLoopCounterBuffer = intLoopCounterBuffer + 1;
        if (arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1) != "00000000")
        {
          if (i_fltBufferVolume > 40)
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter300);
          }
          else
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips50, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter50);
          }
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 2, 0, 0);
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -2, 0, 0);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -2, 0, 0);
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 2, 0, 0);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 0, 2, 0);
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 0, -2, 0);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 0, -2, 0);
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 0, 2, 0);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        SeqIncrement(i_seqTemplate, _intNumberOfChannels);
        if (
           (i_seqTemplate.GetCurrentPosition() > 0 && i_seqTemplate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTemplate.SetMax(i_seqTemplate.GetTotal());
      i_seqFinal.SetMax(i_seqFinal.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTemplate.SetCurrentPosition(1);
      i_seqFinal.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
  }

  function ResuspendBeadsAndTransfer( device & ML_STAR, sequence i_seqTemplate, sequence & i_seqFrom, sequence i_seqTo, sequence i_seqFinal, variable i_fltBufferVolume, variable i_strLiquidClass, variable i_intMixingCycles ) void {
    private variable intLoopCounterBuffer;
    private variable fltMixingVolume;
    private variable blnOdd;
    private variable arr_ChannelPattern[];
    private variable intModule4;
    _editArrChannelPattern(i_seqTemplate, i_seqTo, arr_ChannelPattern);
    {
      intLoopCounterBuffer = 0;
      while (
         (i_seqTemplate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFinal, 1, i_seqFrom, 1, i_seqTemplate, 1, i_seqTo, 1);
        intLoopCounterBuffer = intLoopCounterBuffer + 1;
        intModule4=intLoopCounterBuffer%2;
        if (intModule4==1||intModule4==2)
        blnOdd=1;
        else
        blnOdd=0;
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("blnOdd___________"), blnOdd);
        if (arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1) != "00000000")
        {
          if (i_fltBufferVolume > 40)
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter300);
          }
          else
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips50, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter50);
          }
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, 0, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, 0, 0);
          }
          fltMixingVolume = i_fltBufferVolume*0.7;
          Trace (fltMixingVolume);
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, 0, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, 0, 0);
          }
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, 0, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, 0, 0);
          }
          fltMixingVolume = i_fltBufferVolume*0.7;
          Trace (fltMixingVolume);
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, 0, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, 0, 0);
          }
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        SeqIncrement(i_seqTemplate, _intNumberOfChannels);
        if (
           (i_seqTemplate.GetCurrentPosition() > 0 && i_seqTemplate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFinal.SetMax(i_seqFinal.GetTotal());
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTemplate.SetMax(i_seqTemplate.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFinal.SetCurrentPosition(1);
      i_seqTemplate.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
  }

  function TransferElution( device & ML_STAR, sequence i_seqTemplate, sequence i_seqFrom, sequence i_seqTo, variable i_fltVolumeToRemove, variable i_blnKeepPattern, variable i_strLiquidClass, variable i_fltAspirationHeight ) void {
    private variable blnOdd;
    private variable blnLiquidFollowing;
    private variable intLoopCounterRemoveBuffer;
    private variable arr_ChannelPattern[];
    private variable intModule4;
    if (i_fltAspirationHeight <= 1)
    {
      blnLiquidFollowing = 0;
    }
    else
    {
      blnLiquidFollowing = 1;
    }
    _editArrChannelPattern(i_seqTemplate, i_seqFrom, arr_ChannelPattern);
    {
      intLoopCounterRemoveBuffer = 0;
      while (
         (i_seqTemplate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqTemplate, 1, i_seqTo, 1);
        intLoopCounterRemoveBuffer = intLoopCounterRemoveBuffer + 1;
        intModule4=intLoopCounterRemoveBuffer%4;
        if (intModule4==1||intModule4==2)
        blnOdd=1;
        else
        blnOdd=0;
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("blnOdd___________"), blnOdd);
        if (blnOdd == 1)
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, 0, 0);
        }
        else
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, 0, 0);
        }
        if (arr_ChannelPattern.ElementAt( intLoopCounterRemoveBuffer -1) != "00000000")
        {
          if (i_fltVolumeToRemove > 50)
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, arr_ChannelPattern.ElementAt( intLoopCounterRemoveBuffer -1), _strTipCounter300);
          }
          else
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips50, arr_ChannelPattern.ElementAt( intLoopCounterRemoveBuffer -1), _strTipCounter50);
          }
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (blnOdd == 1)
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, 0, 0);
        }
        else
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, 0, 0);
        }
        if (arr_ChannelPattern.ElementAt( intLoopCounterRemoveBuffer -1) != "00000000")
        {
          if (i_blnKeepPattern == 1)
          {
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          else
          {
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        SeqIncrement(i_seqTemplate, _intNumberOfChannels);
        if (i_blnKeepPattern == 1)
        {
          SeqIncrement(i_seqTo, _intNumberOfChannels);
        }
        if (
           (i_seqTemplate.GetCurrentPosition() > 0 && i_seqTemplate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqTemplate.SetMax(i_seqTemplate.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqTemplate.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
  }

  function MixBeads( device & ML_STAR, variable i_intNumberOfTubes, variable i_intNumberOfSamples, variable i_intAliquotVol, sequence i_seqBeads ) void {
    private variable fltBeadsVol;
    private variable strChannelPattern;
    private variable fltMixingVolume;
    private variable loopCounter1;
    private variable fltMixingVol;
    private variable intLoopCounterChannel;
    private variable fltMeasuredVolume;
    private variable strLiquidClass;
    private variable arrMixingVolumes[];
    strChannelPattern = Translate("");
    i_seqBeads.SetCount(i_intNumberOfTubes);
    {
      for(loopCounter1 = 0; loopCounter1 < 8;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 <= i_intNumberOfTubes)
        {
          strChannelPattern = StrConcat2(strChannelPattern, Translate("1"));
        }
        else
        {
          strChannelPattern = StrConcat2(strChannelPattern, Translate("0"));
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("strChannelPattern: "), strChannelPattern);
    fltBeadsVol = i_intAliquotVol * i_intNumberOfSamples;
    fltBeadsVol = i_intAliquotVol / (i_intNumberOfTubes * 1.0);
    fltMixingVol = fltBeadsVol * 0.8;
    if (fltMixingVol > 1000)
    {
      fltMixingVol = 1000;
    }
    if(0){
      if (fltMixingVol <= 300)
      {
        strLiquidClass = Translate("StandardVolumeFilter_Water_DispenseSurface_Empty");
        _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, strChannelPattern, _strTipCounter300);
      }
      else
      {
      }
    }
    strLiquidClass = Translate("HighVolumeFilter_Water_DispenseSurface_Empty_fastMix");
    _TipPickUp_ChannelPattern(ML_STAR, _seqTips1000, strChannelPattern, _strTipCounter1000);
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    HSLML_STAR::MeasureContainerVolume2(ML_STAR, i_seqBeads, 0, strChannelPattern, 0, 0, 0);
    arrMixingVolumes.SetSize(0);
    {
      for(intLoopCounterChannel = 0; intLoopCounterChannel < i_intNumberOfTubes;)
      {
        intLoopCounterChannel = intLoopCounterChannel + 1;
        fltMeasuredVolume = HSLML_STAR::GetContainerVolume(intLoopCounterChannel);
        fltMeasuredVolume = fltMeasuredVolume * 1000;
        fltMixingVolume = fltMeasuredVolume * 0.8;
        if (fltMixingVolume < 30)
        {
          fltMixingVolume = 30;
        }
        if (fltMixingVolume > 950)
        {
          fltMixingVolume = 950;
        }
        arrMixingVolumes.AddAsLast(fltMixingVolume);
      }
    }
    TRACELEVEL::Debug_TraceArray(arrMixingVolumes, Translate("arrMixingVolumes___________"));
    ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }

  function AddElutionMIDI( device & ML_STAR, sequence i_seqTemplate, sequence i_seqFrom, sequence i_seqTo, variable i_fltBufferVolume, variable i_strLiquidClass, variable i_blnSequenceFromCounting, variable i_intResuspensionCycles ) void {
    private variable intLoopCounterBuffer;
    private variable fltMixingVolume;
    private variable loopCounter1;
    private variable blnOdd;
    private variable arr_ChannelPattern[];
    private variable intModule4;
    _editArrChannelPattern(i_seqTemplate, i_seqTo, arr_ChannelPattern);
    {
      intLoopCounterBuffer = 0;
      while (
         (i_seqTemplate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTemplate, 1);
        intLoopCounterBuffer = intLoopCounterBuffer + 1;
        intModule4=intLoopCounterBuffer%2;
        if (intModule4==1||intModule4==2)
        blnOdd=1;
        else
        blnOdd=0;
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("blnOdd___________"), blnOdd);
        if (arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1) != "00000000")
        {
          if (i_fltBufferVolume > 40)
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter300);
          }
          else
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips50, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter50);
          }
          HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, 0, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, 0, 0);
          }
          fltMixingVolume = i_fltBufferVolume*0.7;
          Trace (fltMixingVolume);
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, 0, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, 0, 0);
          }
          {
            for(loopCounter1 = 0; loopCounter1 < i_intResuspensionCycles;)
            {
              loopCounter1 = loopCounter1 + 1;
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              if (blnOdd == 1)
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, 0, 0);
              }
              else
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, 0, 0);
              }
              fltMixingVolume = i_fltBufferVolume*0.7;
              Trace (fltMixingVolume);
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              if (blnOdd == 1)
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, 0, 0);
              }
              else
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, 0, 0);
              }
            }
          }
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        SeqIncrement(i_seqTemplate, _intNumberOfChannels);
        if (
           (i_seqTemplate.GetCurrentPosition() > 0 && i_seqTemplate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTemplate.SetMax(i_seqTemplate.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTemplate.SetCurrentPosition(1);
    }
  }

  function TransferDNAMixingDouble( device & ML_STAR, sequence i_seqFrom, sequence & i_seqIntermediate, sequence i_seqTo, variable i_intTipType, variable i_fltVolume1, variable i_fltVolume2, variable i_fltAspHeight, variable i_strLiquidClass, variable i_intMixingCycles, variable i_fltMixingVol ) void {
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    {
      while (
         (i_seqFrom.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1, i_seqIntermediate, 1);
        if (i_intTipType == 50)
        {
          _TipPickUp(ML_STAR, _seqTips50, i_seqTo, _strTipCounter50);
        }
        else
        {
          _TipPickUp(ML_STAR, _seqTips300, i_seqTo, _strTipCounter300);
        }
        if (i_fltAspHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqFrom.GetCurrentPosition() > 0 && i_seqFrom.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqIntermediate.SetMax(i_seqIntermediate.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
      i_seqIntermediate.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  }

  function PoolDNAMulti( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable & i_arrFltVolumes[], variable i_strLiquidClass ) void {
    private variable LoopCounter1;
    private variable intIndex;
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    intIndex = 1;
    {
      LoopCounter1 = 0;
      while (
         (i_seqFrom.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        LoopCounter1 = LoopCounter1 + 1;
        _TipPickUp(ML_STAR, _seqTips50, i_seqFrom, _strTipCounter50);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        if (LoopCounter1 == 1)
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        intIndex = intIndex + 8;
        if (
           (i_seqFrom.GetCurrentPosition() > 0 && i_seqFrom.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  }

  function TransferSupernatantKeepTips( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVol, variable i_intTipSelection, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight ) void {
    if (i_intTipSelection == 300)
    {
      _TipPickUp(ML_STAR, _seqTips300, i_seqFrom, _strTipCounter300);
    }
    else
    {
      _TipPickUp(ML_STAR, _seqTips50, i_seqFrom, _strTipCounter50);
    }
    {
      while (
         (i_seqFrom.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        if (i_fltAspHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (i_fltDispHeight == -1)
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        if (
           (i_seqFrom.GetCurrentPosition() > 0 && i_seqFrom.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }

  function MixWash2Capture( device & ML_STAR, sequence i_seqTemplate, sequence i_seqFrom, sequence i_seqTo, variable i_fltBufferVolume, variable i_strLiquidClass, variable i_blnSequenceFromCounting, variable i_intResuspensionCycles, variable i_fltDeltaX, variable i_fltDeltaY ) void {
    private variable intLoopCounterBuffer;
    private variable fltMixingVolume;
    private variable loopCounter1;
    private variable blnOdd;
    private variable arr_ChannelPattern[];
    private variable intModule4;
    private variable fltOddX;
    private variable fltReturnY;
    private variable fltEvenX;
    _editArrChannelPattern(i_seqTemplate, i_seqTo, arr_ChannelPattern);
    {
      intLoopCounterBuffer = 0;
      while (
         (i_seqTemplate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTemplate, 1);
        intLoopCounterBuffer = intLoopCounterBuffer + 1;
        intModule4=intLoopCounterBuffer%2;
        if (intModule4==1||intModule4==2)
        blnOdd=1;
        else
        blnOdd=0;
        fltOddX = i_fltDeltaX;
        fltEvenX = -1*fltOddX;
        fltReturnY = -1*i_fltDeltaY;
        Trace ("OddX= ", fltOddX);
        Trace ("EvenX= ", fltEvenX);
        Trace ("DeltaY= ", i_fltDeltaY);
        Trace ("ReturnY= ", fltReturnY);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("blnOdd___________"), blnOdd);
        if (arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1) != "00000000")
        {
          if (i_fltBufferVolume > 40)
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter300);
          }
          else
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips50, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter50);
          }
          HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, 1, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, 1, 0);
          }
          fltMixingVolume = i_fltBufferVolume*0.8;
          Trace (fltMixingVolume);
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, -1, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, -1, 0);
          }
          {
            for(loopCounter1 = 0; loopCounter1 < i_intResuspensionCycles;)
            {
              loopCounter1 = loopCounter1 + 1;
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              if (blnOdd == 1)
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, -1, 0);
              }
              else
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, -1, 0);
              }
              fltMixingVolume = i_fltBufferVolume*0.8;
              Trace (fltMixingVolume);
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              if (blnOdd == 1)
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, 1, 0);
              }
              else
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, 1, 0);
              }
            }
          }
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        SeqIncrement(i_seqTemplate, _intNumberOfChannels);
        if (
           (i_seqTemplate.GetCurrentPosition() > 0 && i_seqTemplate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTemplate.SetMax(i_seqTemplate.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTemplate.SetCurrentPosition(1);
    }
  }

  function AssembleCaptureElutionMix( device & ML_STAR, variable i_intNumberOfPool, variable i_fltReagent1Vol, variable i_fltReagent2Vol, sequence i_seqReagent1, sequence i_seqReagent2, sequence i_seqMix ) void {
    private variable fltReagent1TotVol;
    private variable fltReagent2TotVol;
    private variable fltTotalMixVol;
    private variable strLiquidClass2;
    private variable strLiquidClass3;
    private variable strLiquidClass1;
    private variable intNumberOfSamplesForMix;
    intNumberOfSamplesForMix = i_intNumberOfPool + 2;
    fltReagent1TotVol = i_fltReagent1Vol * intNumberOfSamplesForMix;
    fltReagent2TotVol = i_fltReagent2Vol * intNumberOfSamplesForMix;
    fltTotalMixVol = fltReagent1TotVol + fltReagent2TotVol;
    TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("fltReagent1TotVol = "), fltReagent1TotVol, Translate("fltReagent2TotVol = "), fltReagent2TotVol, Translate("fltTotalMixVol = "), fltTotalMixVol);
    if(0){
      strLiquidClass2 = Translate("OspFerrara_Tip_50ulFilter_Water_DispenseSurface_Empty_Blowout");
      _TipPickUp_ChannelPattern(ML_STAR, _seqTips50, Translate("10000000"), _strTipCounter50);
      if (fltReagent1TotVol >= 250)
      {
        strLiquidClass1 = Translate("HighVolumeFilter_Water_DispenseSurface_Empty");
        _TipPickUp_ChannelPattern(ML_STAR, _seqTips1000, Translate("01000000"), _strTipCounter1000);
      }
      else
      {
        strLiquidClass1 = Translate("StandardVolumeFilter_Water_DispenseSurface_Empty");
        _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, Translate("01000000"), _strTipCounter300);
      }
      HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    }
    if (fltReagent1TotVol >= 250)
    {
      strLiquidClass1 = Translate("HighVolumeFilter_Water_DispenseSurface_Empty");
      _TipPickUp_ChannelPattern(ML_STAR, _seqTips1000, Translate("10000000"), _strTipCounter1000);
    }
    else
    {
      strLiquidClass1 = Translate("StandardVolumeFilter_Water_DispenseSurface_Empty");
      _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, Translate("10000000"), _strTipCounter300);
    }
    strLiquidClass2 = Translate("OspFerrara_Tip_50ulFilter_Water_DispenseSurface_Empty_Blowout");
    _TipPickUp_ChannelPattern(ML_STAR, _seqTips50, Translate("01000000"), _strTipCounter50);
    if (fltTotalMixVol >= 250)
    {
      strLiquidClass3 = Translate("HighVolumeFilter_Water_DispenseSurface_Empty");
      _TipPickUp_ChannelPattern(ML_STAR, _seqTips1000, Translate("00100000"), _strTipCounter1000);
    }
    else
    {
      strLiquidClass3 = Translate("StandardVolumeFilter_Water_DispenseSurface_Empty");
      _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, Translate("00100000"), _strTipCounter300);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }

  function RemoveSupernatantMPH( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_blnTipPickUp, sequence i_seqTipToUse, variable i_strChannelPatternMPH, variable i_fltVol, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_blnDirectTipEject, variable i_blnTipEject ) void {
    if (i_blnTipPickUp == 1)
    {
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    }
    if (i_fltAspHeight == -1)
    {
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    }
    else
    {
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    }
    if (i_blnDirectTipEject == 0)
    {
      if (i_fltDispHeight == -1)
      {
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      }
      else
      {
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      }
    }
    if (i_blnTipEject == 1)
    {
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
  }

  function TransferDNAMixingMPH( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVolume, variable i_fltAspHeight, variable i_fltDispHeight, variable i_strLiquidClass, variable i_intMixingCycles, variable i_fltMixingVol, variable i_blnTipPickUp, variable i_blnTipEject, variable i_strChannelPatternMPH, sequence i_seqTipToUse ) void {
    if (i_blnTipPickUp == 1)
    {
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    }
    if (i_fltAspHeight == -1)
    {
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    }
    else
    {
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    }
    if (i_fltDispHeight == -1)
    {
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    else
    {
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    if (i_blnTipEject == 1)
    {
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
  }

  function AddWashCapture( device & ML_STAR, sequence i_seqTemplate, sequence & i_seqFrom, sequence i_seqTo, variable i_fltBufferVolume, variable i_strLiquidClass, variable i_blnSequenceFromCounting, variable i_intResuspensionCycles, variable i_fltDeltaX, variable i_fltDeltaY ) void {
    private variable intLoopCounterBuffer;
    private variable fltMixingVolume;
    private variable loopCounter1;
    private variable blnOdd;
    private variable arr_ChannelPattern[];
    private variable fltOddX;
    private variable fltReturnY;
    private variable fltEvenX;
    private variable intModule4;
    _editArrChannelPattern(i_seqTemplate, i_seqTo, arr_ChannelPattern);
    {
      intLoopCounterBuffer = 0;
      while (
         (i_seqTemplate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTemplate, 1);
        intLoopCounterBuffer = intLoopCounterBuffer + 1;
        intModule4=intLoopCounterBuffer%2;
        if (intModule4==1||intModule4==2)
        {
          blnOdd=1;
        }
        else
        {
          blnOdd=0;
        }
        fltOddX = i_fltDeltaX;
        fltEvenX = -1*fltOddX;
        fltReturnY = -1*i_fltDeltaY;
        Trace ("OddX= ", fltOddX);
        Trace ("EvenX= ", fltEvenX);
        Trace ("DeltaY= ", i_fltDeltaY);
        Trace ("ReturnY= ", fltReturnY);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("blnOdd___________"), blnOdd);
        if (arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1) != "00000000")
        {
          if (i_fltBufferVolume > 40)
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter300);
          }
          else
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips50, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter50);
          }
          HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, 1, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, 1, 0);
          }
          fltMixingVolume = i_fltBufferVolume*0.7;
          Trace (fltMixingVolume);
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, -1, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, -1, 0);
          }
          {
            for(loopCounter1 = 0; loopCounter1 < i_intResuspensionCycles;)
            {
              loopCounter1 = loopCounter1 + 1;
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              if (blnOdd == 1)
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, -1, 0);
              }
              else
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, -1, 0);
              }
              fltMixingVolume = i_fltBufferVolume*0.7;
              Trace (fltMixingVolume);
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              if (blnOdd == 1)
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -1, 1, 0);
              }
              else
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 1, 1, 0);
              }
            }
          }
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        SeqIncrement(i_seqTemplate, _intNumberOfChannels);
        if (
           (i_seqTemplate.GetCurrentPosition() > 0 && i_seqTemplate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTemplate.SetMax(i_seqTemplate.GetTotal());
      i_seqTemplate.SetCurrentPosition(1);
    }
  }

  function Aliquot( device & ML_STAR, sequence & i_seqFrom, sequence & i_seqTo, variable i_intTipNumber, variable i_intTipCapacity, variable i_fltAliquotVolume, variable i_fltPreVolume, variable i_fltPostVolume, variable i_intDispensationHeight, variable i_intDispensationHeightPrePost, variable i_strLiquidClass, variable i_strLiquidClassPost, variable i_blnJetPart, variable i_blnConditionTips, variable i_strLiquidClassConditioning ) void {
    private variable fltNumberOfFullCycles;
    private variable intLoopCounterAliquot;
    private variable fltTipCapacityReduced;
    private variable intNumberOfRemainingWells1;
    private variable fltMaxNumberOfAliquotInTip;
    private variable intCurrentPosition;
    private variable blnTipsConditioningNeeded;
    private variable intRetractDistance;
    private variable fltAliquotsInTips;
    private variable intDispenseMode;
    private variable intAliquotsInTipsPlus1;
    private variable retValDisp;
    private variable intNumberOfFullCycles;
    private variable intTotalWells;
    private variable retValAsp;
    private variable fltVolumeToAspirate;
    private variable intEndPosition;
    private variable strCannelPattern;
    private variable mod;
    private variable intMaxNumberOfAliquotInTip;
    private variable intLoopCounterFullCycles;
    private variable intAliquotsInTips;
    private variable intMaxNumberOfAliquotInAllTips;
    private variable intLoopCounterChannel;
    private variable intLiquidFollowing;
    private variable arrAliquotsInTips[];
    private variable arrVolumesInTips[];
    if (i_blnConditionTips == 1)
    {
      blnTipsConditioningNeeded = 1;
    }
    if (i_blnJetPart == 1)
    {
      intDispenseMode = 0;
      intRetractDistance = 0;
      intLiquidFollowing = 0;
    }
    else
    {
      intDispenseMode = 2;
      intRetractDistance = 5;
      intLiquidFollowing = 1;
    }
    strCannelPattern = Translate("");
    {
      for(intLoopCounterChannel = 0; intLoopCounterChannel < 8;)
      {
        intLoopCounterChannel = intLoopCounterChannel + 1;
        if (intLoopCounterChannel <= i_intTipNumber)
        {
          strCannelPattern = StrConcat2(strCannelPattern, Translate("1"));
        }
        else
        {
          strCannelPattern = StrConcat2(strCannelPattern, Translate("0"));
        }
      }
    }
    if (i_intTipCapacity == 50)
    {
      _TipPickUp_ChannelPattern(ML_STAR, _seqTips50, strCannelPattern, _strTipCounter50);
    }
    if (i_intTipCapacity == 300)
    {
      _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, strCannelPattern, _strTipCounter300);
    }
    if (i_intTipCapacity == 1000)
    {
      _TipPickUp_ChannelPattern(ML_STAR, _seqTips1000, strCannelPattern, _strTipCounter1000);
    }
    intEndPosition = i_seqTo.GetCount();
    intCurrentPosition = i_seqTo.GetCurrentPosition();
    intTotalWells = intEndPosition - intCurrentPosition;
    intTotalWells = intTotalWells + 1;
    fltTipCapacityReduced = i_intTipCapacity - i_fltPreVolume;
    fltTipCapacityReduced = fltTipCapacityReduced - i_fltPostVolume;
    fltMaxNumberOfAliquotInTip = fltTipCapacityReduced / (i_fltAliquotVolume * 1.0);
    intMaxNumberOfAliquotInTip = MthFloor(fltMaxNumberOfAliquotInTip);
    intMaxNumberOfAliquotInAllTips = intMaxNumberOfAliquotInTip * i_intTipNumber;
    fltNumberOfFullCycles = intTotalWells / (intMaxNumberOfAliquotInAllTips * 1.0);
    intNumberOfFullCycles = MthFloor(fltNumberOfFullCycles);
    arrAliquotsInTips.SetSize(0);
    arrVolumesInTips.SetSize(0);
    {
      for(intLoopCounterChannel = 0; intLoopCounterChannel < 8;)
      {
        intLoopCounterChannel = intLoopCounterChannel + 1;
        if (intLoopCounterChannel <= i_intTipNumber)
        {
          arrAliquotsInTips.AddAsLast(intMaxNumberOfAliquotInTip);
          fltVolumeToAspirate = i_fltAliquotVolume * intMaxNumberOfAliquotInTip;
          fltVolumeToAspirate = fltVolumeToAspirate + i_fltPreVolume;
          fltVolumeToAspirate = fltVolumeToAspirate + i_fltPostVolume;
          arrVolumesInTips.AddAsLast(fltVolumeToAspirate);
        }
        else
        {
          arrAliquotsInTips.AddAsLast(0);
          arrVolumesInTips.AddAsLast(0);
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("intTotalWells________"), intTotalWells);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("fltMaxNumberOfAliquotInTip________"), fltMaxNumberOfAliquotInTip);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("intMaxNumberOfAliquotInTip________"), intMaxNumberOfAliquotInTip);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("intNumberOfFullCycles________"), intNumberOfFullCycles);
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("arrAliquotsInTips__________"), Translate("arrVolumesInTips__________"), arrAliquotsInTips, arrVolumesInTips);
    if (intNumberOfFullCycles > 0)
    {
      if (blnTipsConditioningNeeded == 1)
      {
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	retValAsp = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	retValDisp = arrRetValues[2];
        }
        blnTipsConditioningNeeded = 0;
      }
    }
    {
      for(intLoopCounterFullCycles = 0; intLoopCounterFullCycles < intNumberOfFullCycles;)
      {
        intLoopCounterFullCycles = intLoopCounterFullCycles + 1;
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	retValAsp = arrRetValues[2];
        }
        TRACELEVEL::Debug_Trace2(Translate("retValAsp______________"), retValAsp);
        if (i_intDispensationHeightPrePost != -1)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            	retValDisp = arrRetValues[2];
          }
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            	retValDisp = arrRetValues[2];
          }
        }
        TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
        {
          for(intLoopCounterAliquot = 0; intLoopCounterAliquot < intMaxNumberOfAliquotInTip;)
          {
            intLoopCounterAliquot = intLoopCounterAliquot + 1;
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	retValDisp = arrRetValues[2];
            }
            TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
          }
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	retValDisp = arrRetValues[2];
        }
        TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
      }
    }
    intNumberOfRemainingWells1 = intTotalWells % intMaxNumberOfAliquotInAllTips;
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("intNumberOfRemainingWells after full cycles________"), intNumberOfRemainingWells1);
    arrAliquotsInTips.SetSize(0);
    arrVolumesInTips.SetSize(0);
    fltAliquotsInTips = intNumberOfRemainingWells1 / (i_intTipNumber * 1.0);
    intAliquotsInTips = MthFloor(fltAliquotsInTips);
    intAliquotsInTipsPlus1 = intAliquotsInTips + 1;
    mod = intNumberOfRemainingWells1 % i_intTipNumber;
    strCannelPattern = Translate("");
    {
      for(intLoopCounterChannel = 0; intLoopCounterChannel < 8;)
      {
        intLoopCounterChannel = intLoopCounterChannel + 1;
        if (intLoopCounterChannel <= i_intTipNumber)
        {
          if (intLoopCounterChannel <= mod)
          {
            arrAliquotsInTips.AddAsLast(intAliquotsInTipsPlus1);
            fltVolumeToAspirate = i_fltAliquotVolume * intAliquotsInTipsPlus1;
            fltVolumeToAspirate = fltVolumeToAspirate + i_fltPreVolume;
            fltVolumeToAspirate = fltVolumeToAspirate + i_fltPostVolume;
            arrVolumesInTips.AddAsLast(fltVolumeToAspirate);
            strCannelPattern = StrConcat2(strCannelPattern, Translate("1"));
          }
          else
          {
            arrAliquotsInTips.AddAsLast(intAliquotsInTips);
            fltVolumeToAspirate = i_fltAliquotVolume * intAliquotsInTips;
            if (intAliquotsInTips > 0)
            {
              fltVolumeToAspirate = fltVolumeToAspirate + i_fltPreVolume;
              fltVolumeToAspirate = fltVolumeToAspirate + i_fltPostVolume;
              strCannelPattern = StrConcat2(strCannelPattern, Translate("1"));
            }
            else
            {
              strCannelPattern = StrConcat2(strCannelPattern, Translate("0"));
            }
            arrVolumesInTips.AddAsLast(fltVolumeToAspirate);
          }
        }
        else
        {
          arrAliquotsInTips.AddAsLast(0);
          arrVolumesInTips.AddAsLast(0);
          strCannelPattern = StrConcat2(strCannelPattern, Translate("0"));
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("strCannelPattern_______"), strCannelPattern);
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("arrAliquotsInTips__________"), Translate("arrVolumesInTips__________"), arrAliquotsInTips, arrVolumesInTips);
    if (blnTipsConditioningNeeded == 1)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        	retValAsp = arrRetValues[2];
      }
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	retValDisp = arrRetValues[2];
      }
      blnTipsConditioningNeeded = 0;
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      	retValAsp = arrRetValues[2];
    }
    TRACELEVEL::Debug_Trace2(Translate("retValAsp______________"), retValAsp);
    if (i_intDispensationHeightPrePost != -1)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	retValDisp = arrRetValues[2];
      }
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	retValDisp = arrRetValues[2];
      }
    }
    TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqTo, 1);
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	retValDisp = arrRetValues[2];
        }
        TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
        SeqIncrement(i_seqTo, i_intTipNumber);
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqTo.SetCurrentPosition(1);
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      	retValDisp = arrRetValues[2];
    }
    TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }

  function Aliquot_AspirateAll( device & ML_STAR, sequence & i_seqFrom, sequence & i_seqTo, variable i_intTipNumber, variable i_intTipCapacity, variable i_fltAliquotVolume, variable i_fltPreVolume, variable i_fltPostVolume, variable i_intDispensationHeight, variable i_intDispensationHeightPrePost, variable i_strLiquidClass, variable i_strLiquidClassPost, variable i_blnJetPart, variable i_blnConditionTips, variable i_strLiquidClassConditioning ) void {
    private variable fltNumberOfFullCycles;
    private variable intLoopCounterAliquot;
    private variable fltTipCapacityReduced;
    private variable intNumberOfRemainingWells1;
    private variable fltMaxNumberOfAliquotInTip;
    private variable intCurrentPosition;
    private variable blnTipsConditioningNeeded;
    private variable intRetractDistance;
    private variable fltAliquotsInTips;
    private variable intDispenseMode;
    private variable intAliquotsInTipsPlus1;
    private variable retValDisp;
    private variable intNumberOfFullCycles;
    private variable intTotalWells;
    private variable retValAsp;
    private variable intEndPosition;
    private variable fltVolumeToAspirate;
    private variable strCannelPattern;
    private variable mod;
    private variable intMaxNumberOfAliquotInTip;
    private variable intLoopCounterFullCycles;
    private variable intAliquotsInTips;
    private variable intMaxNumberOfAliquotInAllTips;
    private variable intLoopCounterChannel;
    private variable intLiquidFollowing;
    private variable arrAliquotsInTips[];
    private variable arrVolumesInTips[];
    if (i_blnConditionTips == 1)
    {
      blnTipsConditioningNeeded = 1;
    }
    if (i_blnJetPart == 1)
    {
      intDispenseMode = 0;
      intRetractDistance = 0;
      intLiquidFollowing = 0;
    }
    else
    {
      intDispenseMode = 2;
      intRetractDistance = 5;
      intLiquidFollowing = 1;
    }
    strCannelPattern = Translate("");
    {
      for(intLoopCounterChannel = 0; intLoopCounterChannel < 8;)
      {
        intLoopCounterChannel = intLoopCounterChannel + 1;
        if (intLoopCounterChannel <= i_intTipNumber)
        {
          strCannelPattern = StrConcat2(strCannelPattern, Translate("1"));
        }
        else
        {
          strCannelPattern = StrConcat2(strCannelPattern, Translate("0"));
        }
      }
    }
    if (i_intTipCapacity == 50)
    {
      _TipPickUp_ChannelPattern(ML_STAR, _seqTips50, strCannelPattern, _strTipCounter50);
    }
    if (i_intTipCapacity == 300)
    {
      _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, strCannelPattern, _strTipCounter300);
    }
    if (i_intTipCapacity == 1000)
    {
      _TipPickUp_ChannelPattern(ML_STAR, _seqTips1000, strCannelPattern, _strTipCounter1000);
    }
    intEndPosition = i_seqTo.GetCount();
    intCurrentPosition = i_seqTo.GetCurrentPosition();
    intTotalWells = intEndPosition - intCurrentPosition;
    intTotalWells = intTotalWells + 1;
    fltTipCapacityReduced = i_intTipCapacity - i_fltPreVolume;
    fltTipCapacityReduced = fltTipCapacityReduced - i_fltPostVolume;
    fltMaxNumberOfAliquotInTip = fltTipCapacityReduced / (i_fltAliquotVolume * 1.0);
    intMaxNumberOfAliquotInTip = MthFloor(fltMaxNumberOfAliquotInTip);
    intMaxNumberOfAliquotInAllTips = intMaxNumberOfAliquotInTip * i_intTipNumber;
    fltNumberOfFullCycles = intTotalWells / (intMaxNumberOfAliquotInAllTips * 1.0);
    intNumberOfFullCycles = MthFloor(fltNumberOfFullCycles);
    arrAliquotsInTips.SetSize(0);
    arrVolumesInTips.SetSize(0);
    {
      for(intLoopCounterChannel = 0; intLoopCounterChannel < 8;)
      {
        intLoopCounterChannel = intLoopCounterChannel + 1;
        if (intLoopCounterChannel <= i_intTipNumber)
        {
          arrAliquotsInTips.AddAsLast(intMaxNumberOfAliquotInTip);
          fltVolumeToAspirate = i_fltAliquotVolume * intMaxNumberOfAliquotInTip;
          fltVolumeToAspirate = fltVolumeToAspirate + i_fltPreVolume;
          fltVolumeToAspirate = fltVolumeToAspirate + i_fltPostVolume;
          arrVolumesInTips.AddAsLast(fltVolumeToAspirate);
        }
        else
        {
          arrAliquotsInTips.AddAsLast(0);
          arrVolumesInTips.AddAsLast(0);
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("intTotalWells________"), intTotalWells);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("fltMaxNumberOfAliquotInTip________"), fltMaxNumberOfAliquotInTip);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("intMaxNumberOfAliquotInTip________"), intMaxNumberOfAliquotInTip);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("intNumberOfFullCycles________"), intNumberOfFullCycles);
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("arrAliquotsInTips__________"), Translate("arrVolumesInTips__________"), arrAliquotsInTips, arrVolumesInTips);
    if (intNumberOfFullCycles > 0)
    {
      if (blnTipsConditioningNeeded == 1)
      {
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	retValAsp = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	retValDisp = arrRetValues[2];
        }
        blnTipsConditioningNeeded = 0;
      }
    }
    {
      for(intLoopCounterFullCycles = 0; intLoopCounterFullCycles < intNumberOfFullCycles;)
      {
        intLoopCounterFullCycles = intLoopCounterFullCycles + 1;
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	retValAsp = arrRetValues[2];
        }
        TRACELEVEL::Debug_Trace2(Translate("retValAsp______________"), retValAsp);
        if (i_intDispensationHeightPrePost != -1)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            	retValDisp = arrRetValues[2];
          }
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            	retValDisp = arrRetValues[2];
          }
        }
        TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
        {
          for(intLoopCounterAliquot = 0; intLoopCounterAliquot < intMaxNumberOfAliquotInTip;)
          {
            intLoopCounterAliquot = intLoopCounterAliquot + 1;
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	retValDisp = arrRetValues[2];
            }
            TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
          }
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	retValDisp = arrRetValues[2];
        }
        TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
      }
    }
    intNumberOfRemainingWells1 = intTotalWells % intMaxNumberOfAliquotInAllTips;
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("intNumberOfRemainingWells after full cycles________"), intNumberOfRemainingWells1);
    arrAliquotsInTips.SetSize(0);
    arrVolumesInTips.SetSize(0);
    fltAliquotsInTips = intNumberOfRemainingWells1 / (i_intTipNumber * 1.0);
    intAliquotsInTips = MthFloor(fltAliquotsInTips);
    intAliquotsInTipsPlus1 = intAliquotsInTips + 1;
    mod = intNumberOfRemainingWells1 % i_intTipNumber;
    strCannelPattern = Translate("");
    {
      for(intLoopCounterChannel = 0; intLoopCounterChannel < 8;)
      {
        intLoopCounterChannel = intLoopCounterChannel + 1;
        if (intLoopCounterChannel <= i_intTipNumber)
        {
          if (intLoopCounterChannel <= mod)
          {
            arrAliquotsInTips.AddAsLast(intAliquotsInTipsPlus1);
            fltVolumeToAspirate = i_fltAliquotVolume * intAliquotsInTipsPlus1;
            fltVolumeToAspirate = fltVolumeToAspirate + i_fltPreVolume;
            fltVolumeToAspirate = fltVolumeToAspirate + i_fltPostVolume;
            arrVolumesInTips.AddAsLast(fltVolumeToAspirate);
            strCannelPattern = StrConcat2(strCannelPattern, Translate("1"));
          }
          else
          {
            arrAliquotsInTips.AddAsLast(intAliquotsInTips);
            fltVolumeToAspirate = i_fltAliquotVolume * intAliquotsInTips;
            if (intAliquotsInTips > 0)
            {
              fltVolumeToAspirate = fltVolumeToAspirate + i_fltPreVolume;
              fltVolumeToAspirate = fltVolumeToAspirate + i_fltPostVolume;
              strCannelPattern = StrConcat2(strCannelPattern, Translate("1"));
            }
            else
            {
              strCannelPattern = StrConcat2(strCannelPattern, Translate("0"));
            }
            arrVolumesInTips.AddAsLast(fltVolumeToAspirate);
          }
        }
        else
        {
          arrAliquotsInTips.AddAsLast(0);
          arrVolumesInTips.AddAsLast(0);
          strCannelPattern = StrConcat2(strCannelPattern, Translate("0"));
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("strCannelPattern_______"), strCannelPattern);
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("arrAliquotsInTips__________"), Translate("arrVolumesInTips__________"), arrAliquotsInTips, arrVolumesInTips);
    if (blnTipsConditioningNeeded == 1)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        	retValAsp = arrRetValues[2];
      }
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	retValDisp = arrRetValues[2];
      }
      blnTipsConditioningNeeded = 0;
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      	retValAsp = arrRetValues[2];
    }
    TRACELEVEL::Debug_Trace2(Translate("retValAsp______________"), retValAsp);
    if (i_intDispensationHeightPrePost != -1)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	retValDisp = arrRetValues[2];
      }
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	retValDisp = arrRetValues[2];
      }
    }
    TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqTo, 1);
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	retValDisp = arrRetValues[2];
        }
        TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
        SeqIncrement(i_seqTo, i_intTipNumber);
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqTo.SetCurrentPosition(1);
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      	retValDisp = arrRetValues[2];
    }
    TRACELEVEL::Debug_Trace2(Translate("retValDisp______________"), retValDisp);
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }

  function AddMixSurfaceKeepTips( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_intTipCapacity, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intMixingCycles, variable i_fltMixingVol ) void {
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    if (i_intTipCapacity == 50)
    {
      _TipPickUp(ML_STAR, _seqTips50, i_seqTo, _strTipCounter50);
    }
    else
    {
      _TipPickUp(ML_STAR, _seqTips300, i_seqTo, _strTipCounter300);
    }
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        if (i_fltAspirationHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (i_fltDispenseHeight == -1)
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  }

  function ResuspendBeadsAndTransferResuspending( device & ML_STAR, sequence i_seqTemplate, sequence & i_seqFrom, sequence i_seqTo, sequence i_seqFinal, variable i_fltBufferVolume, variable i_strLiquidClass, variable i_intMixingCycles ) void {
    private variable intLoopCounterBuffer;
    private variable fltMixingVolume;
    private variable blnOdd;
    private variable arr_ChannelPattern[];
    private variable intModule4;
    private variable fltTransferVolume;
    _editArrChannelPattern(i_seqTemplate, i_seqTo, arr_ChannelPattern);
    {
      intLoopCounterBuffer = 0;
      while (
         (i_seqTemplate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFinal, 1, i_seqFrom, 1, i_seqTemplate, 1, i_seqTo, 1);
        intLoopCounterBuffer = intLoopCounterBuffer + 1;
        intModule4=intLoopCounterBuffer%2;
        if (intModule4==1||intModule4==2)
        blnOdd=1;
        else
        blnOdd=0;
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("blnOdd___________"), blnOdd);
        if (arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1) != "00000000")
        {
          if (i_fltBufferVolume > 40)
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter300);
          }
          else
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips50, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter50);
          }
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 0.5, 0.5, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -0.5, 0.5, 0);
          }
          fltMixingVolume = i_fltBufferVolume*0.7;
          Trace (fltMixingVolume);
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -0.5, -0.5, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 0.5, -0.5, 0);
          }
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 0.5, -0.5, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -0.5, -0.5, 0);
          }
          fltMixingVolume = i_fltBufferVolume*0.7;
          Trace (fltMixingVolume);
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -0.5, 0.5, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 0.5, 0.5, 0);
          }
          fltTransferVolume = i_fltBufferVolume+7;
          Trace (fltTransferVolume);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 0.5, 0.5, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -0.5, 0.5, 0);
          }
          fltMixingVolume = i_fltBufferVolume*0.7;
          Trace (fltMixingVolume);
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -0.5, -0.5, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 0.5, -0.5, 0);
          }
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 0.5, -0.5, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -0.5, -0.5, 0);
          }
          fltMixingVolume = i_fltBufferVolume*0.7;
          Trace (fltMixingVolume);
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, -0.5, 0.5, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, 0.5, 0.5, 0);
          }
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        SeqIncrement(i_seqTemplate, _intNumberOfChannels);
        if (
           (i_seqTemplate.GetCurrentPosition() > 0 && i_seqTemplate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFinal.SetMax(i_seqFinal.GetTotal());
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTemplate.SetMax(i_seqTemplate.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFinal.SetCurrentPosition(1);
      i_seqTemplate.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
  }

  function MixSamples( device & ML_STAR, sequence & i_seqMixing, variable i_intMixingCycles, variable i_fltMixingVol, variable i_fltMixingHeight, variable i_intTipCapacity, variable i_strLiquidClass, variable i_fltDeltaX, variable i_fltDeltaY ) void {
    private variable intLoopCounterColumn;
    private variable blnOdd;
    private variable intModule4;
    private variable fltOddX;
    private variable fltEvenX;
    private variable fltReturnY;
    private timer timer1;
    {
      intLoopCounterColumn = 0;
      while (
         (i_seqMixing.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqMixing, 1);
        intLoopCounterColumn = intLoopCounterColumn + 1;
        intModule4=intLoopCounterColumn%2;
        if (intModule4==1||intModule4==2)
        {
          blnOdd=1;
        }
        else
        {
          blnOdd=0;
        }
        fltOddX = i_fltDeltaX;
        fltEvenX = -1*fltOddX;
        fltReturnY = -1*i_fltDeltaY;
        Trace ("OddX= ", fltOddX);
        Trace ("EvenX= ", fltEvenX);
        Trace ("DeltaY= ", i_fltDeltaY);
        Trace ("ReturnY= ", fltReturnY);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("blnOdd___________"), blnOdd);
        if (i_intTipCapacity == 50)
        {
          _TipPickUp(ML_STAR, _seqTips50, i_seqMixing, _strTipCounter50);
        }
        if (i_intTipCapacity == 300)
        {
          _TipPickUp(ML_STAR, _seqTips300, i_seqMixing, _strTipCounter300);
        }
        if (i_intTipCapacity == 1000)
        {
          _TipPickUp(ML_STAR, _seqTips1000, i_seqMixing, _strTipCounter1000);
        }
        if (blnOdd == 1)
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMixing, fltOddX, i_fltDeltaY, 0);
        }
        else
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMixing, fltEvenX, i_fltDeltaY, 0);
        }
        if (i_fltMixingHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (blnOdd == 1)
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMixing, fltEvenX, fltReturnY, 0);
        }
        else
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMixing, fltOddX, fltReturnY, 0);
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if( 0 == timer1.SetTimer(2) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqMixing.GetCurrentPosition() > 0 && i_seqMixing.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqMixing.SetMax(i_seqMixing.GetTotal());
      i_seqMixing.SetCurrentPosition(1);
    }
  }

  function ResuspendCaptureBeads( device & ML_STAR, sequence & i_seqMixing, variable i_intMixingCycles, variable i_fltMixingVol, variable i_fltMixingHeight, variable i_intTipCapacity, variable i_strLiquidClass, variable i_fltDeltaX, variable i_fltDeltaY ) void {
    private variable fltOddX;
    private variable fltReturnY;
    private variable intLoopCounterColumn;
    private variable blnOdd;
    private variable fltEvenX;
    private timer timer1;
    private variable intModule4;
    {
      intLoopCounterColumn = 0;
      while (
         (i_seqMixing.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqMixing, 1);
        intLoopCounterColumn = intLoopCounterColumn + 1;
        intModule4=intLoopCounterColumn%2;
        if (intModule4==1||intModule4==2)
        {
          blnOdd=1;
        }
        else
        {
          blnOdd=0;
        }
        fltOddX = i_fltDeltaX;
        fltEvenX = -1*fltOddX;
        fltReturnY = -1*i_fltDeltaY;
        Trace ("OddX= ", fltOddX);
        Trace ("EvenX= ", fltEvenX);
        Trace ("DeltaY= ", i_fltDeltaY);
        Trace ("ReturnY= ", fltReturnY);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("blnOdd___________"), blnOdd);
        if (i_intTipCapacity == 50)
        {
          _TipPickUp(ML_STAR, _seqTips50, i_seqMixing, _strTipCounter50);
        }
        if (i_intTipCapacity == 300)
        {
          _TipPickUp(ML_STAR, _seqTips300, i_seqMixing, _strTipCounter300);
        }
        if (i_intTipCapacity == 1000)
        {
          _TipPickUp(ML_STAR, _seqTips1000, i_seqMixing, _strTipCounter1000);
        }
        if (blnOdd == 1)
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMixing, fltOddX, i_fltDeltaY, 0);
        }
        else
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMixing, fltEvenX, i_fltDeltaY, 0);
        }
        if (i_fltMixingHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (blnOdd == 1)
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMixing, fltEvenX, fltReturnY, 0);
        }
        else
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMixing, fltOddX, fltReturnY, 0);
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (blnOdd == 1)
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMixing, 0, i_fltDeltaY, 0);
        }
        else
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMixing, 0, i_fltDeltaY, 0);
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        if (blnOdd == 1)
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMixing, 0, fltReturnY, 0);
        }
        else
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMixing, 0, fltReturnY, 0);
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if( 0 == timer1.SetTimer(2) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqMixing.GetCurrentPosition() > 0 && i_seqMixing.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqMixing.SetMax(i_seqMixing.GetTotal());
      i_seqMixing.SetCurrentPosition(1);
    }
  }

  function AddWashJet_KeepFromSequenceUpdated( device & ML_STAR, sequence & i_seqFrom, sequence i_seqTo, variable i_fltTipVolume, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDIspensationHeight ) void {
    if (i_fltTipVolume == 50)
    {
      _TipPickUp(ML_STAR, _seqTips50, i_seqTo, _strTipCounter50);
    }
    else
    {
      _TipPickUp(ML_STAR, _seqTips300, i_seqTo, _strTipCounter300);
    }
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        if (i_fltAspirationHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqTo.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }

  function MixSamplesAndTransfer( device & ML_STAR, sequence & i_seqMixing, sequence i_seqTo, variable i_intMixingCycles, variable i_fltMixingVol, variable i_fltMixingHeight, variable i_intTipCapacity, variable i_strLiquidClass, variable i_fltDeltaX, variable i_fltDeltaY, variable i_fltAspVolume, variable i_fltAspHeight ) void {
    private variable fltOddX;
    private variable fltReturnY;
    private variable intLoopCounterColumn;
    private variable blnOdd;
    private variable fltEvenX;
    private variable intModule4;
    {
      intLoopCounterColumn = 0;
      while (
         (i_seqMixing.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqMixing, 1, i_seqTo, 1);
        intLoopCounterColumn = intLoopCounterColumn + 1;
        intModule4=intLoopCounterColumn%2;
        if (intModule4==1||intModule4==2)
        {
          blnOdd=1;
        }
        else
        {
          blnOdd=0;
        }
        fltOddX = i_fltDeltaX;
        fltEvenX = -1*fltOddX;
        fltReturnY = -1*i_fltDeltaY;
        Trace ("OddX= ", fltOddX);
        Trace ("EvenX= ", fltEvenX);
        Trace ("DeltaY= ", i_fltDeltaY);
        Trace ("ReturnY= ", fltReturnY);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("blnOdd___________"), blnOdd);
        if (i_intTipCapacity == 50)
        {
          _TipPickUp(ML_STAR, _seqTips50, i_seqMixing, _strTipCounter50);
        }
        if (i_intTipCapacity == 300)
        {
          _TipPickUp(ML_STAR, _seqTips300, i_seqMixing, _strTipCounter300);
        }
        if (i_intTipCapacity == 1000)
        {
          _TipPickUp(ML_STAR, _seqTips1000, i_seqMixing, _strTipCounter1000);
        }
        if (blnOdd == 1)
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMixing, fltOddX, i_fltDeltaY, 0);
        }
        else
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMixing, fltEvenX, i_fltDeltaY, 0);
        }
        if (i_fltMixingHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (blnOdd == 1)
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMixing, fltEvenX, fltReturnY, 0);
        }
        else
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqMixing, fltOddX, fltReturnY, 0);
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (i_fltAspHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqMixing.GetCurrentPosition() > 0 && i_seqMixing.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqMixing.SetMax(i_seqMixing.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqMixing.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
  }

  function AddElutionLIGHTAndTransfer( device & ML_STAR, sequence i_seqTemplate, sequence i_seqFrom, sequence i_seqTo, sequence i_seqFinal, variable i_fltBufferVolume, variable i_fltRecoveryVolume, variable i_strLiquidClass, variable i_fltAspHeight, variable i_blnSequenceFromCounting, variable i_intResuspensionCycles, variable i_fltDeltaX, variable i_fltDeltaY ) void {
    private variable fltOddX;
    private variable fltReturnY;
    private variable intLoopCounterBuffer;
    private variable fltMixingVolume;
    private variable loopCounter1;
    private variable blnOdd;
    private variable fltEvenX;
    private variable arr_ChannelPattern[];
    private variable intModule4;
    _editArrChannelPattern(i_seqTemplate, i_seqTo, arr_ChannelPattern);
    {
      intLoopCounterBuffer = 0;
      while (
         (i_seqTemplate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTemplate, 1);
        intLoopCounterBuffer = intLoopCounterBuffer + 1;
        intModule4=intLoopCounterBuffer%2;
        if (intModule4==1||intModule4==2)
        {
          blnOdd=1;
        }
        else
        {
          blnOdd=0;
        }
        fltOddX = i_fltDeltaX;
        fltEvenX = -1*fltOddX;
        fltReturnY = -1*i_fltDeltaY;
        Trace ("OddX= ", fltOddX);
        Trace ("EvenX= ", fltEvenX);
        Trace ("DeltaY= ", i_fltDeltaY);
        Trace ("ReturnY= ", fltReturnY);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("blnOdd___________"), blnOdd);
        if (arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1) != "00000000")
        {
          if (i_fltBufferVolume > 40)
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips300, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter300);
          }
          else
          {
            _TipPickUp_ChannelPattern(ML_STAR, _seqTips50, arr_ChannelPattern.ElementAt( intLoopCounterBuffer -1), _strTipCounter50);
          }
          HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
          if (i_fltAspHeight == -1)
          {
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          else
          {
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, fltOddX, i_fltDeltaY, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, fltEvenX, i_fltDeltaY, 0);
          }
          fltMixingVolume = i_fltBufferVolume*0.7;
          Trace (fltMixingVolume);
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (blnOdd == 1)
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, fltEvenX, fltReturnY, 0);
          }
          else
          {
            VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, fltOddX, fltReturnY, 0);
          }
          {
            for(loopCounter1 = 0; loopCounter1 < i_intResuspensionCycles;)
            {
              loopCounter1 = loopCounter1 + 1;
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              if (blnOdd == 1)
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, fltOddX, fltReturnY, 0);
              }
              else
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, fltEvenX, fltReturnY, 0);
              }
              fltMixingVolume = i_fltBufferVolume*0.7;
              Trace (fltMixingVolume);
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              if (blnOdd == 1)
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, fltEvenX, i_fltDeltaY, 0);
              }
              else
              {
                VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTemplate, fltOddX, i_fltDeltaY, 0);
              }
            }
          }
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        SeqIncrement(i_seqTemplate, _intNumberOfChannels);
        if (
           (i_seqTemplate.GetCurrentPosition() > 0 && i_seqTemplate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTemplate.SetMax(i_seqTemplate.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTemplate.SetCurrentPosition(1);
    }
  }

  function AddDiluent_Dilution50( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable & i_arr_fltVolume[], variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight ) void {
    private variable intIndex;
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    _TipPickUp(ML_STAR, _seqTips50, i_seqTo, _strTipCounter50);
    intIndex = 1;
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        if (i_fltAspHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (i_fltDispHeight == -1)
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        intIndex = intIndex + _intNumberOfChannels;
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  }

  function AddFragMixSurface( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_intTipCapacity, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_intMixingCycles, variable i_fltMixingVol ) void {
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        if (i_intTipCapacity == 50)
        {
          _TipPickUp(ML_STAR, _seqTips50, i_seqTo, _strTipCounter50);
        }
        else
        {
          _TipPickUp(ML_STAR, _seqTips300, i_seqTo, _strTipCounter300);
        }
        if (i_fltAspirationHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  }

  function AddStreptavidinSurface( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_intTipCapacity, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intMixingCycles, variable i_fltMixingVol ) void {
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        if (i_intTipCapacity == 50)
        {
          _TipPickUp(ML_STAR, _seqTips50, i_seqTo, _strTipCounter50);
        }
        else
        {
          _TipPickUp(ML_STAR, _seqTips300, i_seqTo, _strTipCounter300);
        }
        if (i_fltAspirationHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (i_fltDispenseHeight == -1)
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  }

  function PoolDNAMultiVolAndPos( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable & i_arrFltVolumes[], variable i_strLiquidClass ) void {
    private variable intIndex;
    private variable LoopCounter1;
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    intIndex = 1;
    {
      LoopCounter1 = 0;
      while (
         (i_seqFrom.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        LoopCounter1 = LoopCounter1 + 1;
        _TipPickUp(ML_STAR, _seqTips50, i_seqFrom, _strTipCounter50);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        intIndex = intIndex + 8;
        if (
           (i_seqFrom.GetCurrentPosition() > 0 && i_seqFrom.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  }

  function AddDiluentToPool( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable & i_arr_fltVolume[], variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight ) void {
    private variable intIndex;
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    intIndex = 1;
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        _TipPickUp(ML_STAR, _seqTips50, i_seqTo, _strTipCounter50);
        if (i_fltAspHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (i_fltDispHeight == -1)
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        intIndex = intIndex + _intNumberOfChannels;
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  }

  function AddIndexSurface_Piercing( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVolume, variable i_strLiquidClass, variable i_intMixingCycles, variable i_fltMixingVol ) void {
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        _TipPickUp(ML_STAR, _seqTips50, i_seqTo, _strTipCounter50);
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  }

  function RemoveDropDown( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_fltVol, variable i_intTipSelection, variable i_strLiquidClass, variable i_fltAspHeight, variable i_fltDispHeight, variable i_blnDirectTipEject, variable i_fltDeltaX, variable i_fltDeltaY ) void {
    private variable fltOddX;
    private variable fltReturnY;
    private variable intLoopCounterBuffer;
    private variable blnOdd;
    private variable fltEvenX;
    private variable intModule4;
    {
      intLoopCounterBuffer = 0;
      while (
         (i_seqFrom.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        intLoopCounterBuffer = intLoopCounterBuffer + 1;
        intModule4=intLoopCounterBuffer%2;
        if (intModule4==1||intModule4==2)
        {
          blnOdd=1;
        }
        else
        {
          blnOdd=0;
        }
        fltOddX = i_fltDeltaX;
        fltEvenX = -1*fltOddX;
        fltReturnY = -1*i_fltDeltaY;
        Trace ("OddX= ", fltOddX);
        Trace ("EvenX= ", fltEvenX);
        Trace ("DeltaY= ", i_fltDeltaY);
        Trace ("ReturnY= ", fltReturnY);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("blnOdd___________"), blnOdd);
        if (i_intTipSelection == 1000)
        {
          _TipPickUp(ML_STAR, _seqTips1000, i_seqFrom, _strTipCounter1000);
        }
        if (i_intTipSelection == 300)
        {
          _TipPickUp(ML_STAR, _seqTips300, i_seqFrom, _strTipCounter300);
        }
        if (i_intTipSelection == 50)
        {
          _TipPickUp(ML_STAR, _seqTips50, i_seqFrom, _strTipCounter50);
        }
        if (blnOdd == 1)
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqFrom, fltOddX, i_fltDeltaY, 0);
        }
        else
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqFrom, fltEvenX, i_fltDeltaY, 0);
        }
        TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, i_seqFrom, 1);
        if (i_fltAspHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        if (blnOdd == 1)
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqFrom, fltEvenX, fltReturnY, 0);
        }
        else
        {
          VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqFrom, fltOddX, fltReturnY, 0);
        }
        TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, i_seqFrom, 1);
        if (i_blnDirectTipEject == 0)
        {
          if (i_fltDispHeight == -1)
          {
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          else
          {
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        SeqIncrement(i_seqFrom, _intNumberOfChannels);
        if (
           (i_seqFrom.GetCurrentPosition() > 0 && i_seqFrom.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
  }

  function AddBeadsSurface( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_intTipCapacity, variable i_fltVolume, variable i_strLiquidClass, variable i_fltAspirationHeight, variable i_fltDispenseHeight, variable i_intMixingCycles, variable i_fltMixingVol ) void {
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    {
      while (
         (i_seqTo.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFrom, 1, i_seqTo, 1);
        if (i_intTipCapacity == 50)
        {
          _TipPickUp(ML_STAR, _seqTips50, i_seqTo, _strTipCounter50);
        }
        else
        {
          _TipPickUp(ML_STAR, _seqTips300, i_seqTo, _strTipCounter300);
        }
        if (i_fltAspirationHeight == -1)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (i_fltDispenseHeight == -1)
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqTo.GetCurrentPosition() > 0 && i_seqTo.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFrom.SetMax(i_seqFrom.GetTotal());
      i_seqTo.SetMax(i_seqTo.GetTotal());
      i_seqFrom.SetCurrentPosition(1);
      i_seqTo.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  }
} // library namespace
