#pragma once
#include "HSLSeqLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLStrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace SEQUENCECONTROLLER {
  function CreateBeadsSequence( sequence i_seqBufferTubes, variable i_intSampleNumber, sequence & o_seqAspirationBuffer ) void ;
  function CreateBufferSequence( sequence i_seqBufferTubes, variable i_intTubeNumber, variable i_intSampleNumber, sequence & o_seqAspirationBuffer ) void ;
  function CreateDaughterSequence( sequence i_seqMother, variable i_strLabwareID, variable i_intBlockOf24, sequence & o_seqDaughter ) void ;
  function CreateDaughterSequence16( sequence i_seqMother, variable i_strLabwareID, variable i_intBlockOf16, sequence & o_seqDaughter ) void ;
  function CreateDaughterSequence48( sequence i_seqMother, variable i_strLabwareID, variable i_intBlockOf48, sequence & o_seqDaughter ) void ;
  function CreateDoubleBufferSequence( sequence i_seqBufferTubes, variable i_intTubeNumber, variable i_intSampleNumber, sequence & o_seqAspirationBuffer ) void ;
  function CreateSampleSequence( variable & i_arrSamplePositions[], sequence & o_seqSamplesEpp ) void ;
  function CreateSequenceFromArray( variable i_strLabwareID, variable & i_arrPositions[], sequence & o_seq ) void ;
  function CreateSequenceFromSequence( sequence i_seqInput, variable i_strLabwareID, sequence & o_seq ) void ;
  function CreateSequenceNumFromSequenceAlfanum( sequence i_seqInput, variable i_strLabwareID, sequence & o_seq ) void ;
  function MergeTwoSequences( sequence i_seqFirst, sequence i_seqSecond, sequence & o_seqOut ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function CreateBufferSequence( sequence i_seqBufferTubes, variable i_intTubeNumber, variable i_intSampleNumber, sequence & o_seqAspirationBuffer ) void {
    private variable intIndex;
    private variable strLabwareID;
    private variable strPositionID;
    i_seqBufferTubes.SetCount(i_intTubeNumber);
    intIndex = 0;
    {
      while (intIndex <= i_intSampleNumber)
      {
        {
          while (
             (i_seqBufferTubes.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seqBufferTubes, 1);
            strLabwareID = SeqGetLabwareId(i_seqBufferTubes);
            strPositionID = SeqGetPositionId(i_seqBufferTubes);
            SeqAdd(o_seqAspirationBuffer, strLabwareID, strPositionID);
            SeqIncrement(i_seqBufferTubes, 1);
            intIndex = intIndex + 1;
            if (
               (i_seqBufferTubes.GetCurrentPosition() > 0 && i_seqBufferTubes.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seqBufferTubes.SetMax(i_seqBufferTubes.GetTotal());
          i_seqBufferTubes.SetCurrentPosition(1);
        }
      }
    }
    o_seqAspirationBuffer.SetCurrentPosition(1);
  }

  function CreateSequenceFromArray( variable i_strLabwareID, variable & i_arrPositions[], sequence & o_seq ) void {
    private variable intSizeArrPositions;
    private variable intLoopCounterPosition;
    private variable strPositionID;
    { sequence __temp; o_seq = __temp; }
    intSizeArrPositions=i_arrPositions.GetSize();
    {
      for(intLoopCounterPosition = 0; intLoopCounterPosition < intSizeArrPositions;)
      {
        intLoopCounterPosition = intLoopCounterPosition + 1;
        strPositionID = StrConcat2(Translate(""), i_arrPositions.ElementAt( intLoopCounterPosition -1));
        SeqAdd(o_seq, i_strLabwareID, strPositionID);
      }
    }
    o_seq.SetCurrentPosition(1);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, o_seq);
  }

  function CreateSequenceFromSequence( sequence i_seqInput, variable i_strLabwareID, sequence & o_seq ) void {
    private variable strPositionID;
    { sequence __temp; o_seq = __temp; }
    {
      while (
         (i_seqInput.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqInput, 1);
        strPositionID = SeqGetPositionId(i_seqInput);
        SeqAdd(o_seq, i_strLabwareID, strPositionID);
        SeqIncrement(i_seqInput, 1);
        if (
           (i_seqInput.GetCurrentPosition() > 0 && i_seqInput.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqInput.SetMax(i_seqInput.GetTotal());
      i_seqInput.SetCurrentPosition(1);
    }
    o_seq.SetCurrentPosition(1);
  }

  function CreateSequenceNumFromSequenceAlfanum( sequence i_seqInput, variable i_strLabwareID, sequence & o_seq ) void {
    private variable strPositionIDNum;
    private variable strRow;
    private variable strPositionID;
    private variable intPositionID;
    private variable intColumn;
    private variable strColumn;
    private variable intRow;
    { sequence __temp; o_seq = __temp; }
    {
      while (
         (i_seqInput.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqInput, 1);
        strPositionID = SeqGetPositionId(i_seqInput);
        strRow = StrLeft(strPositionID, 1);
        if (strRow=="A")
        intRow=1;
        if (strRow=="B")
        intRow=2;
        if (strRow=="C")
        intRow=3;
        if (strRow=="D")
        intRow=4;
        if (strRow=="E")
        intRow=5;
        if (strRow=="F")
        intRow=6;
        if (strRow=="G")
        intRow=7;
        if (strRow=="H")
        intRow=8;
        strColumn = strPositionID;
        StrReplace(strColumn, strRow, Translate(""));
        intColumn = StrIVal(strColumn);
        intPositionID=(intColumn-1)*8+intRow;
        strPositionIDNum = StrConcat2(Translate(""), intPositionID);
        SeqAdd(o_seq, i_strLabwareID, strPositionIDNum);
        SeqIncrement(i_seqInput, 1);
        if (
           (i_seqInput.GetCurrentPosition() > 0 && i_seqInput.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqInput.SetMax(i_seqInput.GetTotal());
      i_seqInput.SetCurrentPosition(1);
    }
    o_seq.SetCurrentPosition(1);
  }

  function CreateBeadsSequence( sequence i_seqBufferTubes, variable i_intSampleNumber, sequence & o_seqAspirationBuffer ) void {
    private variable intIndex;
    private variable strLabwareID;
    private variable intTerminateLoop;
    private variable strPositionID;
    intTerminateLoop = i_intSampleNumber;
    intIndex = 0;
    {
      while (intIndex <= intTerminateLoop)
      {
        {
          while (
             (i_seqBufferTubes.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seqBufferTubes, 1);
            strLabwareID = SeqGetLabwareId(i_seqBufferTubes);
            strPositionID = SeqGetPositionId(i_seqBufferTubes);
            SeqAdd(o_seqAspirationBuffer, strLabwareID, strPositionID);
            SeqIncrement(i_seqBufferTubes, 1);
            intIndex = intIndex + 1;
            if (
               (i_seqBufferTubes.GetCurrentPosition() > 0 && i_seqBufferTubes.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seqBufferTubes.SetMax(i_seqBufferTubes.GetTotal());
          i_seqBufferTubes.SetCurrentPosition(1);
        }
      }
    }
    o_seqAspirationBuffer.SetCurrentPosition(1);
  }

  function CreateSampleSequence( variable & i_arrSamplePositions[], sequence & o_seqSamplesEpp ) void {
    private variable intNumberOfSamples;
    private variable loopCounter1;
    private variable strPosition;
    private variable intPosition;
    { sequence __temp; o_seqSamplesEpp = __temp; }
    intNumberOfSamples=i_arrSamplePositions.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < intNumberOfSamples;)
      {
        loopCounter1 = loopCounter1 + 1;
        intPosition = StrIVal(i_arrSamplePositions.ElementAt( loopCounter1 -1));
        if (intPosition <= 32)
        {
          SeqAdd(o_seqSamplesEpp, Translate("Epp1_5ml_1"), i_arrSamplePositions.ElementAt( loopCounter1 -1));
        }
        else
        {
          if (intPosition <= 64)
          {
            intPosition = intPosition - 32;
            strPosition = StrIStr(intPosition);
            SeqAdd(o_seqSamplesEpp, Translate("Epp1_5ml_2"), strPosition);
          }
          else
          {
            intPosition = intPosition - 64;
            strPosition = StrIStr(intPosition);
            SeqAdd(o_seqSamplesEpp, Translate("Epp1_5ml_3"), strPosition);
          }
        }
      }
    }
    o_seqSamplesEpp.SetCurrentPosition(1);
  }

  function CreateDoubleBufferSequence( sequence i_seqBufferTubes, variable i_intTubeNumber, variable i_intSampleNumber, sequence & o_seqAspirationBuffer ) void {
    private variable intIndex;
    private variable strLabwareID;
    private variable strPositionID;
    private variable intTerminateLoop;
    i_seqBufferTubes.SetCount(i_intTubeNumber);
    intTerminateLoop = 2 * i_intSampleNumber;
    intIndex = 0;
    {
      while (intIndex <= intTerminateLoop)
      {
        {
          while (
             (i_seqBufferTubes.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seqBufferTubes, 1);
            strLabwareID = SeqGetLabwareId(i_seqBufferTubes);
            strPositionID = SeqGetPositionId(i_seqBufferTubes);
            SeqAdd(o_seqAspirationBuffer, strLabwareID, strPositionID);
            SeqIncrement(i_seqBufferTubes, 1);
            intIndex = intIndex + 1;
            if (
               (i_seqBufferTubes.GetCurrentPosition() > 0 && i_seqBufferTubes.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seqBufferTubes.SetMax(i_seqBufferTubes.GetTotal());
          i_seqBufferTubes.SetCurrentPosition(1);
        }
      }
    }
    o_seqAspirationBuffer.SetCurrentPosition(1);
  }

  function CreateDaughterSequence( sequence i_seqMother, variable i_strLabwareID, variable i_intBlockOf24, sequence & o_seqDaughter ) void {
    private variable intCurrent;
    private variable intCurrentMother;
    private variable strPosition;
    private variable intEndMother;
    private variable intEnd;
    private variable intTotal;
    { sequence __temp; o_seqDaughter = __temp; }
    intEndMother = i_seqMother.GetCount();
    intCurrentMother = i_seqMother.GetCurrentPosition();
    intTotal=intEndMother-intCurrentMother+1;
    intCurrent=(i_intBlockOf24-1)*24+1;
    intEnd=intCurrent+intTotal-1;
    i_seqMother.SetCount(intEnd);
    i_seqMother.SetCurrentPosition(intCurrent);
    {
      while (
         (i_seqMother.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqMother, 1, o_seqDaughter, 1);
        strPosition = SeqGetPositionId(i_seqMother);
        SeqAdd(o_seqDaughter, i_strLabwareID, strPosition);
        SeqIncrement(i_seqMother, 1);
        if (
           (i_seqMother.GetCurrentPosition() > 0 && i_seqMother.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqMother.SetMax(i_seqMother.GetTotal());
      o_seqDaughter.SetMax(o_seqDaughter.GetTotal());
      i_seqMother.SetCurrentPosition(1);
      o_seqDaughter.SetCurrentPosition(1);
    }
    o_seqDaughter.SetCurrentPosition(1);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, o_seqDaughter);
  }

  function MergeTwoSequences( sequence i_seqFirst, sequence i_seqSecond, sequence & o_seqOut ) void {
    private variable strLabwareID;
    private variable strPositionID;
    private variable loopCounter1;
    { sequence __temp; o_seqOut = __temp; }
    if(0){
      SeqCopySequence(o_seqOut, i_seqFirst);
    }
    {
      loopCounter1 = 0;
      while (
         (i_seqFirst.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqFirst, 1);
        loopCounter1 = loopCounter1 + 1;
        strLabwareID = SeqGetLabwareId(i_seqFirst);
        strPositionID = SeqGetPositionId(i_seqFirst);
        SeqAdd(o_seqOut, strLabwareID, strPositionID);
        SeqIncrement(i_seqFirst, 1);
        if (
           (i_seqFirst.GetCurrentPosition() > 0 && i_seqFirst.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqFirst.SetMax(i_seqFirst.GetTotal());
      i_seqFirst.SetCurrentPosition(1);
    }
    {
      loopCounter1 = 0;
      while (
         (i_seqSecond.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqSecond, 1);
        loopCounter1 = loopCounter1 + 1;
        strLabwareID = SeqGetLabwareId(i_seqSecond);
        strPositionID = SeqGetPositionId(i_seqSecond);
        SeqAdd(o_seqOut, strLabwareID, strPositionID);
        SeqIncrement(i_seqSecond, 1);
        if (
           (i_seqSecond.GetCurrentPosition() > 0 && i_seqSecond.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqSecond.SetMax(i_seqSecond.GetTotal());
      i_seqSecond.SetCurrentPosition(1);
    }
    o_seqOut.SetCurrentPosition(1);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, o_seqOut);
  }

  function CreateDaughterSequence16( sequence i_seqMother, variable i_strLabwareID, variable i_intBlockOf16, sequence & o_seqDaughter ) void {
    private variable intCurrent;
    private variable intCurrentMother;
    private variable strPosition;
    private variable intEndMother;
    private variable intEnd;
    private variable intTotal;
    { sequence __temp; o_seqDaughter = __temp; }
    intEndMother = i_seqMother.GetCount();
    intCurrentMother = i_seqMother.GetCurrentPosition();
    intTotal=intEndMother-intCurrentMother+1;
    intCurrent=(i_intBlockOf16-1)*16+1;
    intEnd=intCurrent+intTotal-1;
    i_seqMother.SetCount(intEnd);
    i_seqMother.SetCurrentPosition(intCurrent);
    {
      while (
         (i_seqMother.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqMother, 1, o_seqDaughter, 1);
        strPosition = SeqGetPositionId(i_seqMother);
        SeqAdd(o_seqDaughter, i_strLabwareID, strPosition);
        SeqIncrement(i_seqMother, 1);
        if (
           (i_seqMother.GetCurrentPosition() > 0 && i_seqMother.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqMother.SetMax(i_seqMother.GetTotal());
      o_seqDaughter.SetMax(o_seqDaughter.GetTotal());
      i_seqMother.SetCurrentPosition(1);
      o_seqDaughter.SetCurrentPosition(1);
    }
    o_seqDaughter.SetCurrentPosition(1);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, o_seqDaughter);
  }

  function CreateDaughterSequence48( sequence i_seqMother, variable i_strLabwareID, variable i_intBlockOf48, sequence & o_seqDaughter ) void {
    private variable intCurrent;
    private variable intCurrentMother;
    private variable strPosition;
    private variable intEndMother;
    private variable intEnd;
    private variable intTotal;
    { sequence __temp; o_seqDaughter = __temp; }
    intEndMother = i_seqMother.GetCount();
    intCurrentMother = i_seqMother.GetCurrentPosition();
    intTotal=intEndMother-intCurrentMother+1;
    intCurrent=(i_intBlockOf48-1)*48+1;
    intEnd=intCurrent+intTotal-1;
    i_seqMother.SetCount(intEnd);
    i_seqMother.SetCurrentPosition(intCurrent);
    {
      while (
         (i_seqMother.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqMother, 1, o_seqDaughter, 1);
        strPosition = SeqGetPositionId(i_seqMother);
        SeqAdd(o_seqDaughter, i_strLabwareID, strPosition);
        SeqIncrement(i_seqMother, 1);
        if (
           (i_seqMother.GetCurrentPosition() > 0 && i_seqMother.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqMother.SetMax(i_seqMother.GetTotal());
      o_seqDaughter.SetMax(o_seqDaughter.GetTotal());
      i_seqMother.SetCurrentPosition(1);
      o_seqDaughter.SetCurrentPosition(1);
    }
    o_seqDaughter.SetCurrentPosition(1);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, o_seqDaughter);
  }
} // library namespace
