#pragma once
#include "HSLTipCountingLib.hsl"
#include "HSLSeqLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace TIPLOADINGCONTROLLER {
  function TipLoading_1TipType( device & ML_STAR, sequence & i_seqTip1, variable i_strTipCounter1 ) void ;
  function TipLoading_1TipType_CheckAvailableTips( device & ML_STAR, sequence & i_seqTip1, variable i_strTipCounter1, variable i_intNeededTips, variable i_strTipType ) void ;
  function TipLoading_2TipTypes( device & ML_STAR, sequence & i_seqTip1, sequence & i_seqTip2, variable i_strTipCounter1, variable i_strTipCounter2 ) void ;
  function TipLoading_3TipTypes( device & ML_STAR, sequence & i_seqTip1, sequence & i_seqTip2, sequence & i_seqTip3, variable i_strTipCounter1, variable i_strTipCounter2, variable i_strTipCounter3 ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function TipLoading_1TipType( device & ML_STAR, sequence & i_seqTip1, variable i_strTipCounter1 ) void {
    private dialog dialogHandle_1;
    private variable intEnd1;
    {
      while (1 == 1)
      {
        TipCount::Edit2(i_seqTip1, i_strTipCounter1, ML_STAR, 1000);
        intEnd1 = i_seqTip1.GetCount();
        if (intEnd1 != 0)
        {
          break;
        }
        dialogHandle_1.SetOutput(Translate("0 value was set as end position, please correct."));
        dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
  }

  function TipLoading_2TipTypes( device & ML_STAR, sequence & i_seqTip1, sequence & i_seqTip2, variable i_strTipCounter1, variable i_strTipCounter2 ) void {
    private dialog dialogHandle_2;
    private dialog dialogHandle_3;
    private variable intEnd1;
    private variable intEnd2;
    {
      while (1 == 1)
      {
        TipCount::Edit2(i_seqTip1, i_strTipCounter1, ML_STAR, 1000);
        intEnd1 = i_seqTip1.GetCount();
        if (intEnd1 != 0)
        {
          break;
        }
        dialogHandle_3.SetOutput(Translate("0 value was set as end position, please correct."));
        dialogHandle_3.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    {
      while (1 == 1)
      {
        TipCount::Edit2(i_seqTip2, i_strTipCounter2, ML_STAR, 1000);
        intEnd2 = i_seqTip2.GetCount();
        if (intEnd2 != 0)
        {
          break;
        }
        dialogHandle_2.SetOutput(Translate("0 value was set as end position, please correct."));
        dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
  }

  function TipLoading_3TipTypes( device & ML_STAR, sequence & i_seqTip1, sequence & i_seqTip2, sequence & i_seqTip3, variable i_strTipCounter1, variable i_strTipCounter2, variable i_strTipCounter3 ) void {
    private dialog dialogHandle_4;
    private dialog dialogHandle_5;
    private dialog dialogHandle_6;
    private variable intEnd1;
    private variable intEnd2;
    private variable intEnd3;
    {
      while (1 == 1)
      {
        TipCount::Edit2(i_seqTip1, i_strTipCounter1, ML_STAR, 1000);
        intEnd1 = i_seqTip1.GetCount();
        if (intEnd1 != 0)
        {
          break;
        }
        dialogHandle_6.SetOutput(Translate("0 value was set as end position, please correct."));
        dialogHandle_6.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    {
      while (1 == 1)
      {
        TipCount::Edit2(i_seqTip2, i_strTipCounter2, ML_STAR, 1000);
        intEnd2 = i_seqTip2.GetCount();
        if (intEnd2 != 0)
        {
          break;
        }
        dialogHandle_5.SetOutput(Translate("0 value was set as end position, please correct."));
        dialogHandle_5.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    {
      while (1 == 1)
      {
        TipCount::Edit2(i_seqTip3, i_strTipCounter3, ML_STAR, 1000);
        intEnd3 = i_seqTip3.GetCount();
        if (intEnd3 != 0)
        {
          break;
        }
        dialogHandle_4.SetOutput(Translate("0 value was set as end position, please correct."));
        dialogHandle_4.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
  }

  function TipLoading_1TipType_CheckAvailableTips( device & ML_STAR, sequence & i_seqTip1, variable i_strTipCounter1, variable i_intNeededTips, variable i_strTipType ) void {
    private dialog dialogHandle_7;
    private dialog dialogHandle_8;
    private dialog dialogHandle_9;
    private variable retVal;
    private variable intEnd1;
    private variable intAvailableTips;
    private variable intCurrent1;
    TipCount::Read2(i_seqTip1, i_strTipCounter1, ML_STAR);
    intAvailableTips = SeqGetTotal(i_seqTip1);
    intCurrent1 = i_seqTip1.GetCurrentPosition();
    if (intCurrent1 == 0)
    {
      intAvailableTips = 0;
    }
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_DEBUG, i_seqTip1);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("intAvailableTips_____"), intAvailableTips);
    if (intAvailableTips < i_intNeededTips)
    {
      dialogHandle_9.SetOutput(Translate("Insufficient number of tips, please load at least "), i_intNeededTips, Translate(" "), i_strTipType, Translate(".\nPress 'CANCEL' to continue anyway."), "\n");
      retVal = dialogHandle_9.ShowOutput("", hslOKCancel | hslInformation | hslDefButton1, hslInfinite);
      if (retVal != 2)
      {
        {
          while (1 == 1)
          {
            TipCount::Edit2(i_seqTip1, i_strTipCounter1, ML_STAR, 1000);
            intEnd1 = i_seqTip1.GetCount();
            if (intEnd1 != 0)
            {
              intAvailableTips = SeqGetTotal(i_seqTip1);
              if (intAvailableTips >= i_intNeededTips)
              {
                break;
              }
              else
              {
                dialogHandle_7.SetOutput(Translate("Insufficient number of tips, please load at least "), i_intNeededTips, Translate(" "), i_strTipType, Translate(".\nPress 'CANCEL' to continue anyway."), "\n");
                retVal = dialogHandle_7.ShowOutput("", hslOKCancel | hslInformation | hslDefButton1, hslInfinite);
                if (retVal == 2)
                {
                  break;
                }
              }
            }
            else
            {
              dialogHandle_8.SetOutput(Translate("0 value was set as end position, please correct."));
              dialogHandle_8.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            }
          }
        }
      }
    }
  }
} // library namespace
