#pragma once
#include "VirtualLabware\\VirtualLabware.hsl"
#include "HSLSeqLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace TRANSPORTCONTROLLER {
  variable _fltGripHeight;
  variable _fltGripWidth;
  variable _fltGripOpen;
  sequence _seqCOREgripper;
  variable _fltGripWidthLid;
  variable _fltGripOpenLid;
  variable _fltGripHeightLid;
  function InitCOREgripper( variable i_fltGripHeight, variable i_fltGripWidth, variable i_fltGripOpen, variable i_fltGripHeightLid, variable i_fltGripWidthLid, variable i_fltGripOpenLid, sequence i_seqCOREgripper ) void ;
  function MoveMIDIPlate( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_blnCheckPlate, variable i_blnEjectGripper ) void ;
  function MovePCRLid( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_blnCheckPlate, variable i_blnEjectGripper ) void ;
  function MovePCRPlate( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_blnCheckPlate, variable i_blnEjectGripper ) void ;
  function MovePCRPlateToOrbit( device & ML_STAR, sequence i_seqFrom, sequence i_seqOrbit, sequence i_seqTo, variable i_blnCheckPlate, variable i_blnEjectGripper ) void ;
  function ShakePCRPlateByMove( device & ML_STAR, sequence i_seq, variable i_intCycles, variable i_intDelay, variable i_blnCheckPlate, variable i_blnEjectGripper ) void ;
  function ShakePCRPlateByMoveDx( device & ML_STAR, sequence i_seq, variable i_intCycles, variable i_intDelay, variable i_blnCheckPlate, variable i_blnEjectGripper ) void ;
  function ShakePCRPlateByMoveSx( device & ML_STAR, sequence i_seq, variable i_intCycles, variable i_intDelay, variable i_blnCheckPlate, variable i_blnEjectGripper ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function InitCOREgripper( variable i_fltGripHeight, variable i_fltGripWidth, variable i_fltGripOpen, variable i_fltGripHeightLid, variable i_fltGripWidthLid, variable i_fltGripOpenLid, sequence i_seqCOREgripper ) void {
    _fltGripHeight = i_fltGripHeight;
    _fltGripWidth = i_fltGripWidth;
    _fltGripOpen = i_fltGripOpen;
    _fltGripHeightLid = i_fltGripHeightLid;
    _fltGripWidthLid = i_fltGripWidthLid;
    _fltGripOpenLid = i_fltGripOpenLid;
    SeqCopySequence(_seqCOREgripper, i_seqCOREgripper);
  }

  function MovePCRPlate( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_blnCheckPlate, variable i_blnEjectGripper ) void {
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }

  function ShakePCRPlateByMove( device & ML_STAR, sequence i_seq, variable i_intCycles, variable i_intDelay, variable i_blnCheckPlate, variable i_blnEjectGripper ) void {
    private variable intLoopCounterCycles;
    private timer timer1;
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    {
      for(intLoopCounterCycles = 0; intLoopCounterCycles < i_intCycles;)
      {
        intLoopCounterCycles = intLoopCounterCycles + 1;
        VIRTUALLABWARE::MoveSeq(ML_STAR, i_seq, 9, 0, 0);
        ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
        if( 0 == timer1.SetTimer(i_intDelay) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        VIRTUALLABWARE::MoveSeq(ML_STAR, i_seq, -18, 0, 0);
        ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
        if( 0 == timer1.SetTimer(i_intDelay) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        VIRTUALLABWARE::MoveSeq(ML_STAR, i_seq, 9, 0, 0);
      }
    }
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }

  function MovePCRLid( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_blnCheckPlate, variable i_blnEjectGripper ) void {
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }

  function MoveMIDIPlate( device & ML_STAR, sequence i_seqFrom, sequence i_seqTo, variable i_blnCheckPlate, variable i_blnEjectGripper ) void {
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }

  function MovePCRPlateToOrbit( device & ML_STAR, sequence i_seqFrom, sequence i_seqOrbit, sequence i_seqTo, variable i_blnCheckPlate, variable i_blnEjectGripper ) void {
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }

  function ShakePCRPlateByMoveSx( device & ML_STAR, sequence i_seq, variable i_intCycles, variable i_intDelay, variable i_blnCheckPlate, variable i_blnEjectGripper ) void {
    private variable intLoopCounterCycles;
    private timer timer1;
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    {
      for(intLoopCounterCycles = 0; intLoopCounterCycles < i_intCycles;)
      {
        intLoopCounterCycles = intLoopCounterCycles + 1;
        VIRTUALLABWARE::MoveSeq(ML_STAR, i_seq, -9, 0, 0);
        ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
        if( 0 == timer1.SetTimer(i_intDelay) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        VIRTUALLABWARE::MoveSeq(ML_STAR, i_seq, 9, 0, 0);
        ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
        if( 0 == timer1.SetTimer(i_intDelay) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }

  function ShakePCRPlateByMoveDx( device & ML_STAR, sequence i_seq, variable i_intCycles, variable i_intDelay, variable i_blnCheckPlate, variable i_blnEjectGripper ) void {
    private variable intLoopCounterCycles;
    private timer timer1;
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    {
      for(intLoopCounterCycles = 0; intLoopCounterCycles < i_intCycles;)
      {
        intLoopCounterCycles = intLoopCounterCycles + 1;
        VIRTUALLABWARE::MoveSeq(ML_STAR, i_seq, 9, 0, 0);
        ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
        if( 0 == timer1.SetTimer(i_intDelay) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        VIRTUALLABWARE::MoveSeq(ML_STAR, i_seq, -9, 0, 0);
        ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
        if( 0 == timer1.SetTimer(i_intDelay) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }
} // library namespace
