#pragma once
#include "VirtualLabware\\VirtualLabware.hsl"
#include "HSLSeqLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace ISWAPCONTROLLER {
  variable _fltGripHeight;
  variable _fltGripWidth;
  variable _fltGripOpen;
  variable _fltGripWidthLarge;
  variable _fltGripOpenLarge;
  variable _fltGripWidthLID;
  variable _fltGripWidthLargeLID;
  variable _fltGripOpenLID;
  variable _fltGripOpenLargeLID;
  variable _fltGripHeightLID;
  function Init( variable i_fltGripHeight, variable i_fltGripOpen, variable i_fltGripWidth, variable i_fltGripOpenLargePCR, variable i_fltGripWidthLargePCR, variable i_fltGripHeightLID, variable i_fltGripOpenLID, variable i_fltGripWidthLID, variable i_fltGripOpenLargeLID, variable i_fltGripWidthLargeLID ) void ;
  function MoveConfortLid_Large( device & ML_STAR, sequence & i_seqFrom, sequence & i_seqTo, variable i_blnInverseGrip, variable i_blnPark ) void ;
  function MoveConfortLid_Small( device & ML_STAR, sequence & i_seqFrom, sequence & i_seqTo, variable i_blnInverseGrip, variable i_blnPark, variable i_fltXAdjustTo ) void ;
  function MovePCRPlate_Large( device & ML_STAR, sequence & i_seqFrom, sequence & i_seqTo, variable i_blnInverseGrip, variable i_blnPark ) void ;
  function MovePCRPlate_Small( device & ML_STAR, sequence & i_seqFrom, sequence & i_seqTo, variable i_blnInverseGrip, variable i_blnPark ) void ;
  function ParkiSWAP( device & ML_STAR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function MovePCRPlate_Small( device & ML_STAR, sequence & i_seqFrom, sequence & i_seqTo, variable i_blnInverseGrip, variable i_blnPark ) void {
    private dialog dialogHandle1;
    onerror goto errLabel_1 ;
    err.Clear();
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      dialogHandle1.SetOutput(Translate("An error occurred during plate transport, please complete the tranport manually and press ok to continue."));
      dialogHandle1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }   /* end if from skip handler if no error */
    if (i_blnPark == 1)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function Init( variable i_fltGripHeight, variable i_fltGripOpen, variable i_fltGripWidth, variable i_fltGripOpenLargePCR, variable i_fltGripWidthLargePCR, variable i_fltGripHeightLID, variable i_fltGripOpenLID, variable i_fltGripWidthLID, variable i_fltGripOpenLargeLID, variable i_fltGripWidthLargeLID ) void {
    _fltGripHeight = i_fltGripHeight;
    _fltGripOpen = i_fltGripOpen;
    _fltGripWidth = i_fltGripWidth;
    _fltGripWidthLarge = i_fltGripWidthLargePCR;
    _fltGripOpenLarge = i_fltGripOpenLargePCR;
    _fltGripHeightLID = i_fltGripHeightLID;
    _fltGripOpenLID = i_fltGripOpenLID;
    _fltGripWidthLID = i_fltGripWidthLID;
    _fltGripOpenLargeLID = i_fltGripOpenLargeLID;
    _fltGripWidthLargeLID = i_fltGripWidthLargeLID;
  }

  function MoveConfortLid_Small( device & ML_STAR, sequence & i_seqFrom, sequence & i_seqTo, variable i_blnInverseGrip, variable i_blnPark, variable i_fltXAdjustTo ) void {
    private dialog dialogHandle_2;
    private variable fltReturn;
    onerror goto errLabel_3 ;
    err.Clear();
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, i_seqTo, 1);
    VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTo, i_fltXAdjustTo, 0, 0);
    TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, i_seqTo, 1);
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    fltReturn = i_fltXAdjustTo * -1;
    VIRTUALLABWARE::MoveSeq(ML_STAR, i_seqTo, fltReturn, 0, 0);
    TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, i_seqTo, 1);
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      dialogHandle_2.SetOutput(Translate("An error occurred during plate transport, please complete the tranport manually and press ok to continue."));
      dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }   /* end if from skip handler if no error */
    if (i_blnPark == 1)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function MovePCRPlate_Large( device & ML_STAR, sequence & i_seqFrom, sequence & i_seqTo, variable i_blnInverseGrip, variable i_blnPark ) void {
    private dialog dialogHandle_4;
    onerror goto errLabel_5 ;
    err.Clear();
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    errLabel_5 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      dialogHandle_4.SetOutput(Translate("An error occurred during plate transport, please complete the tranport manually and press ok to continue."));
      dialogHandle_4.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }   /* end if from skip handler if no error */
    if (i_blnPark == 1)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function ParkiSWAP( device & ML_STAR ) void {
    ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
  }

  function MoveConfortLid_Large( device & ML_STAR, sequence & i_seqFrom, sequence & i_seqTo, variable i_blnInverseGrip, variable i_blnPark ) void {
    private dialog dialogHandle_6;
    onerror goto errLabel_7 ;
    err.Clear();
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    errLabel_7 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      dialogHandle_6.SetOutput(Translate("An error occurred during plate transport, please complete the tranport manually and press ok to continue."));
      dialogHandle_6.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }   /* end if from skip handler if no error */
    if (i_blnPark == 1)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }
} // library namespace
