private function Init(  ) void ;
private function LibraryWorkflow(  ) void ;
private function Loading(  ) void ;
private function P1_ReverseTranscription(  ) void ;
private function P2_PostRTCleanup(  ) void ;
private function P3_MultiplexAmplification(  ) void ;
private function P4_PostMultiplexAmplificationCleanup(  ) void ;
private function P5_Digestion(  ) void ;
private function P6_PostDigestionCleanup(  ) void ;
private function P7_SecondAmplification(  ) void ;
private function P8_PostSecondAmplificationCleanup(  ) void ;
private function Terminate(  ) void ;
private function TipReloading(  ) void ;
private function Variables(  ) void ;
private function _VersionHistory(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  DIALOGCONTROLLER::StatusDialog_SetText(Translate("=========================\nTerminate On Abort\n========================="));
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  HHSCONTROLLER::Clamps_Open(ML_STAR, 3);
  HHSCONTROLLER::Terminate(ML_STAR, 1, 1);
  CPACCONTROLLERSTC::CPAC_TerminateAll();
  ODTCCONTROLLER::Terminate();
  DIALOGCONTROLLER::StatusDialog_Terminate();
}

private function Init(  ) void {
  DIALOGCONTROLLER::StatusDialog_Init(Translate("CleanPlex SARS-CoV-2"));
  DIALOGCONTROLLER::StatusDialog_SetText(Translate("=========================\nInitialization\n========================="));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  _blnSimulation = HSLML_STAR::IsSimulatorMode(ML_STAR);
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Initialization CORE-gripper"));
  TRANSPORTCONTROLLER::InitCOREgripper(5, 80, 86.5, 3, 83, 86.5, ML_STAR.COREGripTool_OnWaste_1000ul_0001);
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Initialization iSWAP"));
  ISWAPCONTROLLER::Init(5, 86.0, 82.2, 1, 1, 4, 89.0, 87.0, 1, 1);
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Initialization Hamilton Heater Shakers"));
  HHSCONTROLLER::Init(ML_STAR, 1, 1);
  HHSCONTROLLER::Init(ML_STAR, 2, 2);
  HHSCONTROLLER::Init(ML_STAR, 3, 3);
  HHSCONTROLLER::Init(ML_STAR, 4, 4);
  HHSCONTROLLER::Init(ML_STAR, 5, 5);
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Initialization CPAC"));
  CPACCONTROLLERSTC::Init(_blnSimulation);
  CPACCONTROLLERSTC::CPAC_StartTemperatureControl(8.0);
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Initialization ODTC"));
  ODTCCONTROLLER::Init(Translate("192.168.1.50"), _blnSimulation);
  ODTCCONTROLLER::OpenDoor();
  if (_blnVersionLID == 1)
  {
    ODTCCONTROLLER::LoadMethodSet(Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Paragon Genomics\\CleanPlex SARS CoV-2\\Files\\ODTC_scripts\\CleanPlex-SARS-CoV-2_LID.xml"));
  }
  else
  {
    if(0){
      ODTCCONTROLLER::LoadMethodSet(Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Paragon Genomics\\CleanPlex SARS CoV-2\\Files\\ODTC_scripts\\CleanPlex-SARS-CoV-2.xml"));
    }
    ODTCCONTROLLER::LoadMethodSet(Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Paragon Genomics\\CleanPlex SARS CoV-2\\Files\\ODTC_scripts\\CleanPlex-SARS-CoV-2_NoOvershoot.xml"));
  }
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Loading Variables"));
  Variables();
}

private function Loading(  ) void {
  private variable fltActualTemperature;
  private timer DelayCheck;
  private variable loopCounterCheck;
  private variable retVal;
  DIALOGCONTROLLER::StatusDialog_SetText(Translate("=========================\nLoading\n========================="));
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Worklist loading"));
  {
    while (1 == 1)
    {
      DIALOGCONTROLLER::StepChoiceDialog(_blnRT, _blnPostRTCleanup, _blnAmplification1, _blnPostAmplification1Cleanup, _blnDigestion, _blnPostDigestionCleanup, _blnAmplification2, _blnPostAmplification2Cleanup, _strWorklistPath, _intSampleNumberFromDialog);
      IOCONTROLLER::ReadExcelWorklist_Indexing(_strWorklistPath, _intSampleNumber, _arr_strIndexPosID, _arr_strSamplePosID);
      if (_intSampleNumber != _intSampleNumberFromDialog)
      {
        DIALOGCONTROLLER::MessageToUserWarning(Translate("The number of samples in the worklist do not match the number of samples selected in the dialog.\n\nPlease check the correspondence."));
      }
      else
      {
        break;
      }
    }
  }
  ML_STAR.TemplateSequence.SetCount(_intSampleNumber);
  ML_STAR.TemplateSequenceA.SetCount(_intSampleNumber);
  ML_STAR.TemplateSequenceB.SetCount(_intSampleNumber);
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Tips loading"));
  DIALOGCONTROLLER::TipLoadingDialog();
  TIPLOADINGCONTROLLER::TipLoading_3TipTypes(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar50ulTipWithFilter, Translate("1000ulHighVolumeTipWithFilter"), Translate("300ulStandardVolumeTipWithFilter"), Translate("50ulTipWithFilter"));
  PIPETTINGCONTROLLER::Init(ML_STAR, Translate("50ulTipWithFilter"), ML_STAR.MlStar50ulTipWithFilter, Translate("300ulStandardVolumeTipWithFilter"), ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("1000ulHighVolumeTipWithFilter"), ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR.Waste08);
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Deck loading"));
  DIALOGCONTROLLER::DeckLoadingDialogParagon();
  if (_blnSimulation == 0)
  {
    DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Check CPAC Temperature"));
    {
      loopCounterCheck = 0;
      while (1 == 1)
      {
        loopCounterCheck = loopCounterCheck + 1;
        CPACCONTROLLERSTC::CPAC_GetTemperature(fltActualTemperature);
        if (fltActualTemperature > 9.0)
        {
          if( 0 == DelayCheck.SetTimer(30) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == DelayCheck.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if (loopCounterCheck >= 10)
          {
            DIALOGCONTROLLER::MessageToUserYesNo(Translate("CPAC Temperature not reached.\n\nDo you want to start the method now?"), retVal);
            if (retVal == 1)
            {
              break;
            }
          }
        }
        else
        {
          break;
        }
      }
    }
  }
}

private function Terminate(  ) void {
  DIALOGCONTROLLER::StatusDialog_SetText(Translate("=========================\nTerminate\n========================="));
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  HHSCONTROLLER::Terminate(ML_STAR, 1, 1);
  ODTCCONTROLLER::CloseDoor();
  CPACCONTROLLERSTC::CPAC_TerminateAll();
  ODTCCONTROLLER::Terminate();
  DIALOGCONTROLLER::StatusDialog_Terminate();
}

private function TipReloading(  ) void {
  TIPLOADINGCONTROLLER::TipLoading_1TipType_CheckAvailableTips(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("1000ulHighVolumeTipWithFilter"), _intNeededTips1000, Translate("1000 ul Tips"));
  TIPLOADINGCONTROLLER::TipLoading_1TipType_CheckAvailableTips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("300ulStandardVolumeTipWithFilter"), _intNeededTips300, Translate("300 ul Tips"));
  TIPLOADINGCONTROLLER::TipLoading_1TipType_CheckAvailableTips(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, Translate("50ulTipWithFilter"), _intNeededTips50, Translate("50 ul Tips"));
  PIPETTINGCONTROLLER::Init(ML_STAR, Translate("50ulTipWithFilter"), ML_STAR.MlStar50ulTipWithFilter, Translate("300ulStandardVolumeTipWithFilter"), ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("1000ulHighVolumeTipWithFilter"), ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR.Waste08);
}

private function Variables(  ) void {
  _blnShortODTC = 0;
  _blnSkipODTC = 0;
  _blnAirDryOnODTC = 0;
  Trace ("======> _blnShortODTC = ", _blnShortODTC);
  Trace ("======> _blnSkipODTC = ", _blnSkipODTC);
  Trace ("======> _blnAirDryOnODTC = ", _blnAirDryOnODTC);
  _blnVersionLID = 0;
  _fltDeltaXLidMove = -0.5;
  _fltDeltaXLidReturn = 1.0;
  _blnExtendBufferRemoval = 0;
  _intBeadsMigrationTime = 10;
  _strWorklistPath = Translate("");
  _fltStopBufferVol = 2;
  _fltRT_PrimerMixVol = 3;
  _fltRT_EnzymeMixVol = 6;
  _fltBeads1Vol = 48;
  _fltETOH1Vol = 180;
  _fltTE1Vol = 10;
  _fltBinding1Timer = 600;
  _fltOnMagnet1Timer = 180;
  _fltDrying1Timer = 300;
  _fltElution1Timer = 60;
  _fltMultiplexMixVol = 5;
  _fltBeads2Vol = 31;
  _fltETOH2Vol = 180;
  _fltTE2Vol = 10;
  _fltBinding2Timer = 300;
  _fltOnMagnet2Timer = 180;
  _fltDrying2Timer = 300;
  _fltElution2Timer = 60;
  _fltDigestionMixVol = 10;
  _fltBeads3Vol = 29;
  _fltETOH3Vol = 180;
  _fltTE3Vol = 10;
  _fltBinding3Timer = 300;
  _fltOnMagnet3Timer = 180;
  _fltDrying3Timer = 300;
  _fltElution3Timer = 60;
  _fltIndexingMixVol = 26;
  _fltIndexVol = 4;
  _fltBeads4Vol = 40;
  _fltETOH4Vol = 180;
  _fltTE4Vol = 10;
  _fltBinding4Timer = 300;
  _fltOnMagnet4Timer = 180;
  _fltDrying4Timer = 300;
  _fltElution4Timer = 60;
}

private function P1_ReverseTranscription(  ) void {
  private sequence seqReverseTranscription;
  private sequence seqRT_PrimerMix;
  private sequence seqRT_EnzymeMix;
  private timer PrimerAnnealing;
  private timer ReverseTranscription;
  private sequence seqStopRTreaction;
  MECC::TraceComment(Translate("================================================================\n\nReverse Transcription START\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_SetText(Translate("=========================\nReverse Transcription\n========================="));
  MECC::TraceComment(Translate("================================================================\n\nNeeded Tips Calculation\n\n================================================================"));
  _intNeededTips1000=0;
  _intNeededTips300=0;
  _intNeededTips50=3*_intSampleNumber;
  Trace("==============================");
  Trace("Needed 1000ul Tips_____",_intNeededTips1000);
  Trace("Needed 300ul Tips_____",_intNeededTips300);
  Trace("Needed 50ul Tips_____",_intNeededTips50);
  Trace("==============================");
  TipReloading();
  ODTCCONTROLLER::OpenDoor();
  if (_blnShortODTC == 1)
  {
    if (_blnVersionLID == 1)
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod65_Lid80"), 10000);
    }
    else
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod65_Lid110"), 10000);
    }
  }
  else
  {
    if (_blnVersionLID == 1)
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod65_Lid80"), 1);
    }
    else
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod65_Lid110"), 1);
    }
  }
  SEQUENCECONTROLLER::CreateSequenceFromSequence(ML_STAR.TemplateSequenceA, Translate("HSP_PipetteOnCold"), seqReverseTranscription);
  SEQUENCECONTROLLER::CreateSequenceFromSequence(ML_STAR.TemplateSequenceA, Translate("HSP_Pipette"), seqStopRTreaction);
  SEQUENCECONTROLLER::CreateBufferSequence(ML_STAR.seqRT_PrimerMix, 1, _intSampleNumber, seqRT_PrimerMix);
  SEQUENCECONTROLLER::CreateBufferSequence(ML_STAR.seqRT_RTMix, 1, _intSampleNumber, seqRT_EnzymeMix);
  MECC::TraceComment(Translate("================================================================\n\nPrimer Annealing.\n\n================================================================"));
  TRANSPORTCONTROLLER::MovePCRPlate(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_PipetteOnCold, 1, 1);
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Primer Annealing"));
  PIPETTINGCONTROLLER::AddMixSurface(ML_STAR, seqRT_PrimerMix, seqReverseTranscription, 50, _fltRT_PrimerMixVol, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_MasterMixOptimization"), -1, 2, 10, 12);
  ODTCCONTROLLER::WaitForMethod();
  ISWAPCONTROLLER::MovePCRPlate_Small(ML_STAR, ML_STAR.HSP_PipetteOnCold, ML_STAR.HSP_ODTC, 0, 0);
  ISWAPCONTROLLER::MoveConfortLid_Small(ML_STAR, ML_STAR.Ham_ComfortLid_Stack_ParkPos_0002, ML_STAR.Ham_ComfortLid_ODTC, 0, 0, _fltDeltaXLidMove);
  ODTCCONTROLLER::CloseDoor();
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Primer Annealing on ODTC"));
  if (_blnSkipODTC == 0)
  {
    if (_blnShortODTC == 1)
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("PrimerAnnealing_Short"), 1);
    }
    else
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("PrimerAnnealing"), 1);
      if( 0 == PrimerAnnealing.SetTimer(420) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == PrimerAnnealing.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    ODTCCONTROLLER::WaitForMethod();
  }
  ODTCCONTROLLER::OpenDoor();
  if (_blnVersionLID == 1)
  {
    ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod8_Lid50"), 10000);
  }
  else
  {
    ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod8_Lid110"), 10000);
  }
  ISWAPCONTROLLER::MoveConfortLid_Small(ML_STAR, ML_STAR.Ham_ComfortLid_ODTC, ML_STAR.Ham_ComfortLid_Stack_ParkPos_0002, 0, 0, _fltDeltaXLidReturn);
  ISWAPCONTROLLER::MovePCRPlate_Small(ML_STAR, ML_STAR.HSP_ODTC, ML_STAR.HSP_PipetteOnCold, 0, 1);
  MECC::TraceComment(Translate("================================================================\n\nRT Reaction.\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("RT Reaction"));
  PIPETTINGCONTROLLER::AddFragMixSurface(ML_STAR, seqRT_EnzymeMix, seqReverseTranscription, 50, _fltRT_EnzymeMixVol, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_MasterMixOptimization"), -1, 20, 18);
  ODTCCONTROLLER::WaitForMethod();
  ISWAPCONTROLLER::MovePCRPlate_Small(ML_STAR, ML_STAR.HSP_PipetteOnCold, ML_STAR.HSP_ODTC, 0, 0);
  ISWAPCONTROLLER::MoveConfortLid_Small(ML_STAR, ML_STAR.Ham_ComfortLid_Stack_ParkPos_0002, ML_STAR.Ham_ComfortLid_ODTC, 0, 0, _fltDeltaXLidMove);
  ODTCCONTROLLER::CloseDoor();
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Reverse Transcription on ODTC"));
  if (_blnSkipODTC == 0)
  {
    if (_blnShortODTC == 1)
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("ReverseTranscription_Short"), 1);
    }
    else
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("ReverseTranscription"), 1);
      if( 0 == ReverseTranscription.SetTimer(5520) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == ReverseTranscription.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    ODTCCONTROLLER::WaitForMethod();
  }
  ODTCCONTROLLER::OpenDoor();
  ISWAPCONTROLLER::MoveConfortLid_Small(ML_STAR, ML_STAR.Ham_ComfortLid_ODTC, ML_STAR.Ham_ComfortLid_Stack_ParkPos_0002, 0, 0, _fltDeltaXLidReturn);
  ISWAPCONTROLLER::MovePCRPlate_Small(ML_STAR, ML_STAR.HSP_ODTC, ML_STAR.HSP_Pipette, 0, 1);
  MECC::TraceComment(Translate("================================================================\n\nSTOP Reverse Transcription.\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Stop Reverse Transcription"));
  PIPETTINGCONTROLLER::AddMixSurface(ML_STAR, ML_STAR.seqStopBuffer, seqStopRTreaction, 50, _fltStopBufferVol, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_MasterMixOptimization"), -1, 2, 6, 20);
  ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod25_Lid110"), 10000);
  MECC::TraceComment(Translate("================================================================\n\nReverse Transcription FINISH\n\n================================================================"));
}

private function P2_PostRTCleanup(  ) void {
  private sequence seqCleanup;
  private timer Binding;
  private sequence seqCleanupOnMagnet;
  private timer OnMagnet;
  private variable loopCounterWash;
  private timer AirDry;
  private timer Elution;
  private timer Delay;
  MECC::TraceComment(Translate("================================================================\n\nPost Reverse Transcription Cleanup START\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_SetText(Translate("=========================\nPost Reverse Transcription Cleanup\n========================="));
  MECC::TraceComment(Translate("================================================================\n\nNeeded Tips Calculation\n\n================================================================"));
  _intNeededTips1000=20;
  _intNeededTips300=(4*_intSampleNumber);
  _intNeededTips50=(2*_intSampleNumber);
  Trace("==============================");
  Trace("Needed 1000ul Tips_____",_intNeededTips1000);
  Trace("Needed 300ul Tips_____",_intNeededTips300);
  Trace("Needed 50ul Tips_____",_intNeededTips50);
  Trace("==============================");
  TipReloading();
  SEQUENCECONTROLLER::CreateSequenceFromSequence(ML_STAR.TemplateSequenceA, Translate("HSP_Pipette"), seqCleanup);
  SEQUENCECONTROLLER::CreateSequenceFromSequence(ML_STAR.TemplateSequenceA, Translate("HSP_PipetteOnMagnet"), seqCleanupOnMagnet);
  MECC::TraceComment(Translate("================================================================\n\nAdd Beads to samples.\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Mixing Magnetic Beads"));
  PIPETTINGCONTROLLER::MixBeads(ML_STAR, 4, _intSampleNumber, _fltBeads1Vol, ML_STAR.MagneticBeads);
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Add Magnetic Beads to samples"));
  PIPETTINGCONTROLLER::AddBeadsSurface(ML_STAR, ML_STAR.MagneticBeads, seqCleanup, 300, _fltBeads1Vol, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty_FastMoves"), -1, 2, 10, 65);
  if(0){
    PIPETTINGCONTROLLER::AddMixSurface(ML_STAR, ML_STAR.MagneticBeads, seqCleanup, 300, _fltBeads1Vol, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty_FastMoves"), -1, 2, 10, 65);
  }
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Binding"));
  if( 0 == Binding.SetTimer(_fltBinding1Timer) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == Binding.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  TRANSPORTCONTROLLER::MovePCRPlate(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_PipetteOnMagnet, 1, 1);
  if( 0 == OnMagnet.SetTimer(_fltOnMagnet1Timer) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == OnMagnet.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  PIPETTINGCONTROLLER::RemoveSupernatant(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 100, 300, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 4, 1, 0, 0, 0);
  if (_blnExtendBufferRemoval == 1)
  {
    PIPETTINGCONTROLLER::RemoveSupernatant(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 50, 50, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 0.5, -1, 1, 0, 0);
  }
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Washing"));
  {
    for(loopCounterWash = 0; loopCounterWash < 2;)
    {
      loopCounterWash = loopCounterWash + 1;
      PIPETTINGCONTROLLER::Aliquot(ML_STAR, ML_STAR.ETOH70, seqCleanupOnMagnet, 8, 1000, _fltETOH1Vol, 100, 100, 17, 50, Translate("HighVolumeFilter_Water_AliquotDispenseJet_Part_FastMoves"), Translate("HighVolumeFilter_Water_AliquotDispenseJet_Part_FastMoves"), 1, 0, Translate(""));
      TRANSPORTCONTROLLER::ShakePCRPlateByMoveDx(ML_STAR, ML_STAR.HSP_PipetteOnMagnet, 2, _intBeadsMigrationTime, 1, 1);
      if( 0 == Delay.SetTimer(10) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == Delay.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      PIPETTINGCONTROLLER::RemoveSupernatant(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 250, 300, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 10, 1, 0, 0, 0);
    }
  }
  PIPETTINGCONTROLLER::RemoveDropDown(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 20, 50, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 0.5, -1, 1, 0, 0);
  if(0){
    PIPETTINGCONTROLLER::RemoveSupernatant(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 50, 50, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 0.5, -1, 1, 0, 0);
  }
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Air Drying"));
  if( 0 == AirDry.SetTimer(_fltDrying1Timer) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == AirDry.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  TRANSPORTCONTROLLER::MovePCRPlate(ML_STAR, ML_STAR.HSP_PipetteOnMagnet, ML_STAR.HSP_Pipette, 1, 1);
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Add Elution to samples"));
  PIPETTINGCONTROLLER::AddElutionLIGHT(ML_STAR, seqCleanup, ML_STAR.BufferTE, seqCleanup, _fltTE1Vol, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_FastMoves"), -1, 0, 1, 0.5, 0.5);
  if( 0 == Elution.SetTimer(_fltElution1Timer) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == Elution.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("================================================================\n\nPost Reverse Transcription Cleanup FINISH\n\n================================================================"));
}

private function P3_MultiplexAmplification(  ) void {
  private sequence seqAmplificationPool1;
  private sequence seqAmplificationPool2;
  private sequence seqMultiplexPool1Mix;
  private sequence seqMultiplexPool2Mix;
  private timer MultiplexAmplification;
  MECC::TraceComment(Translate("================================================================\n\nMultiplex Amplification START\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_SetText(Translate("=========================\nMultiplex Amplification\n========================="));
  MECC::TraceComment(Translate("================================================================\n\nNeeded Tips Calculation\n\n================================================================"));
  _intNeededTips1000=0;
  _intNeededTips300=0;
  _intNeededTips50=3*_intSampleNumber;
  Trace("==============================");
  Trace("Needed 1000ul Tips_____",_intNeededTips1000);
  Trace("Needed 300ul Tips_____",_intNeededTips300);
  Trace("Needed 50ul Tips_____",_intNeededTips50);
  Trace("==============================");
  TipReloading();
  ODTCCONTROLLER::OpenDoor();
  if (_blnShortODTC == 1)
  {
    ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod25_Lid110"), 10000);
  }
  else
  {
    ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod25_Lid110"), 1);
  }
  SEQUENCECONTROLLER::CreateSequenceFromSequence(ML_STAR.TemplateSequenceA, Translate("HSP_Pipette"), seqAmplificationPool1);
  SEQUENCECONTROLLER::CreateSequenceFromSequence(ML_STAR.TemplateSequenceB, Translate("HSP_Pipette"), seqAmplificationPool2);
  SEQUENCECONTROLLER::CreateBufferSequence(ML_STAR.seqMultiplexPool1Mix, 1, _intSampleNumber, seqMultiplexPool1Mix);
  SEQUENCECONTROLLER::CreateBufferSequence(ML_STAR.seqMultiplexPool2Mix, 1, _intSampleNumber, seqMultiplexPool2Mix);
  MECC::TraceComment(Translate("================================================================\n\nTransfer Samples.\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Transfer Samples"));
  PIPETTINGCONTROLLER::TransferDNA(ML_STAR, seqAmplificationPool1, seqAmplificationPool2, 50, 5, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_FastMoves"), 1, 6, 5, 0.5, 0, 0, 0);
  MECC::TraceComment(Translate("================================================================\n\nAssemble Pool1 Mix.\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Assemble Pool1 Mix"));
  PIPETTINGCONTROLLER::AddMixSurface(ML_STAR, seqMultiplexPool1Mix, seqAmplificationPool1, 50, _fltMultiplexMixVol, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_MasterMixOptimization"), -1, 1, 15, 9);
  MECC::TraceComment(Translate("================================================================\n\nAssemble Pool2 Mix.\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Assemble Pool2 Mix"));
  PIPETTINGCONTROLLER::AddMixSurface(ML_STAR, seqMultiplexPool2Mix, seqAmplificationPool2, 50, _fltMultiplexMixVol, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_MasterMixOptimization"), -1, 1, 15, 9);
  ODTCCONTROLLER::WaitForMethod();
  ISWAPCONTROLLER::MovePCRPlate_Small(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_ODTC, 0, 0);
  ISWAPCONTROLLER::MoveConfortLid_Small(ML_STAR, ML_STAR.Ham_ComfortLid_Stack_ParkPos_0002, ML_STAR.Ham_ComfortLid_ODTC, 0, 0, _fltDeltaXLidMove);
  ODTCCONTROLLER::CloseDoor();
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Multiplex Amplification on ODTC"));
  if (_blnSkipODTC == 0)
  {
    if (_blnShortODTC == 1)
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("MultiplexAmplification_Short"), 1);
    }
    else
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("MultiplexAmplification"), 1);
      if( 0 == MultiplexAmplification.SetTimer(4260) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == MultiplexAmplification.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    ODTCCONTROLLER::WaitForMethod();
  }
  ODTCCONTROLLER::OpenDoor();
  ISWAPCONTROLLER::MoveConfortLid_Small(ML_STAR, ML_STAR.Ham_ComfortLid_ODTC, ML_STAR.Ham_ComfortLid_Waste, 0, 0, 0);
  ISWAPCONTROLLER::MovePCRPlate_Small(ML_STAR, ML_STAR.HSP_ODTC, ML_STAR.HSP_Pipette, 0, 1);
  MECC::TraceComment(Translate("================================================================\n\nSTOP Multiplex Amplification.\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Stop Multiplex Amplification"));
  PIPETTINGCONTROLLER::AddMixSurface(ML_STAR, ML_STAR.seqStopBuffer, seqAmplificationPool1, 50, _fltStopBufferVol, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_MasterMixOptimization"), -1, 1, 6, 10);
  PIPETTINGCONTROLLER::AddMixSurface(ML_STAR, ML_STAR.seqStopBuffer, seqAmplificationPool2, 50, _fltStopBufferVol, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_MasterMixOptimization"), -1, 1, 6, 10);
  if (_blnVersionLID == 1)
  {
    ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod37_Lid50"), 10000);
  }
  else
  {
    ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod37_Lid110"), 10000);
  }
  MECC::TraceComment(Translate("================================================================\n\nMultiplex Amplification FINISH\n\n================================================================"));
}

private function P4_PostMultiplexAmplificationCleanup(  ) void {
  private variable loopCounterWash;
  private timer AirDry;
  private timer OnMagnet;
  private timer Elution;
  private timer Binding;
  private sequence seqCleanupOnMagnet;
  private sequence seqCleanup;
  private sequence seqPool1;
  private timer Delay;
  MECC::TraceComment(Translate("================================================================\n\nPost Multiplex Amaplification Cleanup START\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_SetText(Translate("=========================\nPost Multiplex Amaplification Cleanup\n========================="));
  MECC::TraceComment(Translate("================================================================\n\nNeeded Tips Calculation\n\n================================================================"));
  _intNeededTips1000=20;
  _intNeededTips300=(4*_intSampleNumber);
  _intNeededTips50=(3*_intSampleNumber);
  Trace("==============================");
  Trace("Needed 1000ul Tips_____",_intNeededTips1000);
  Trace("Needed 300ul Tips_____",_intNeededTips300);
  Trace("Needed 50ul Tips_____",_intNeededTips50);
  Trace("==============================");
  TipReloading();
  SEQUENCECONTROLLER::CreateSequenceFromSequence(ML_STAR.TemplateSequenceA, Translate("HSP_Pipette"), seqPool1);
  SEQUENCECONTROLLER::CreateSequenceFromSequence(ML_STAR.TemplateSequenceB, Translate("HSP_Pipette"), seqCleanup);
  SEQUENCECONTROLLER::CreateSequenceFromSequence(ML_STAR.TemplateSequenceB, Translate("HSP_PipetteOnMagnet"), seqCleanupOnMagnet);
  MECC::TraceComment(Translate("================================================================\n\nTransfer Samples.\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Transfer Samples"));
  PIPETTINGCONTROLLER::TransferDNA(ML_STAR, seqPool1, seqCleanup, 50, 17, Translate("Tip_50ulFilter_DNA_DispenseSurface_Empty"), 0.2, 30, 8, 1, 20, 18, 0);
  MECC::TraceComment(Translate("================================================================\n\nAdd Beads to samples.\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Mixing Magnetic Beads"));
  PIPETTINGCONTROLLER::MixBeads(ML_STAR, 4, _intSampleNumber, _fltBeads1Vol, ML_STAR.MagneticBeads);
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Add Magnetic Beads to samples"));
  PIPETTINGCONTROLLER::AddBeadsSurface(ML_STAR, ML_STAR.MagneticBeads, seqCleanup, 300, _fltBeads2Vol, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty_FastMoves"), -1, 2, 10, 50);
  if(0){
    PIPETTINGCONTROLLER::AddMixSurface(ML_STAR, ML_STAR.MagneticBeads, seqCleanup, 300, _fltBeads2Vol, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty_FastMoves"), -1, 2, 10, 50);
  }
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Binding"));
  if( 0 == Binding.SetTimer(_fltBinding2Timer) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == Binding.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  TRANSPORTCONTROLLER::MovePCRPlate(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_PipetteOnMagnet, 1, 1);
  if( 0 == OnMagnet.SetTimer(_fltOnMagnet2Timer) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == OnMagnet.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  PIPETTINGCONTROLLER::RemoveSupernatant(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 80, 300, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 3, 1, 0, 0, 0);
  if (_blnExtendBufferRemoval == 1)
  {
    PIPETTINGCONTROLLER::RemoveSupernatant(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 50, 50, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 0.5, -1, 1, 0, 0);
  }
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Washing"));
  {
    for(loopCounterWash = 0; loopCounterWash < 2;)
    {
      loopCounterWash = loopCounterWash + 1;
      PIPETTINGCONTROLLER::Aliquot(ML_STAR, ML_STAR.ETOH70, seqCleanupOnMagnet, 8, 1000, _fltETOH1Vol, 100, 100, 17, 50, Translate("HighVolumeFilter_Water_AliquotDispenseJet_Part_FastMoves"), Translate("HighVolumeFilter_Water_AliquotDispenseJet_Part_FastMoves"), 1, 0, Translate(""));
      TRANSPORTCONTROLLER::ShakePCRPlateByMoveSx(ML_STAR, ML_STAR.HSP_PipetteOnMagnet, 2, _intBeadsMigrationTime, 1, 1);
      if( 0 == Delay.SetTimer(10) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == Delay.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      PIPETTINGCONTROLLER::RemoveSupernatant(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 250, 300, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 10, 1, 0, 0, 0);
    }
  }
  PIPETTINGCONTROLLER::RemoveDropDown(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 20, 50, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 0.5, -1, 1, 0, 0);
  if(0){
    PIPETTINGCONTROLLER::RemoveSupernatant(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 50, 50, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 0.5, -1, 1, 0, 0);
  }
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Air Drying"));
  if( 0 == AirDry.SetTimer(_fltDrying2Timer) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == AirDry.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  TRANSPORTCONTROLLER::MovePCRPlate(ML_STAR, ML_STAR.HSP_PipetteOnMagnet, ML_STAR.HSP_Pipette, 1, 1);
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Add Elution to samples"));
  PIPETTINGCONTROLLER::AddElutionLIGHT(ML_STAR, seqCleanup, ML_STAR.BufferTE, seqCleanup, _fltTE1Vol, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_FastMoves"), -1, 0, 1, 0.5, 0.5);
  if( 0 == Elution.SetTimer(_fltElution2Timer) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == Elution.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("================================================================\n\nPost Multiplex Amaplification Cleanup FINISH\n\n================================================================"));
}

private function P5_Digestion(  ) void {
  private sequence seqDigestion;
  private sequence seqDigestionMix;
  private timer Digestion;
  MECC::TraceComment(Translate("================================================================\n\nDigestion START\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_SetText(Translate("=========================\nDigestion\n========================="));
  MECC::TraceComment(Translate("================================================================\n\nNeeded Tips Calculation\n\n================================================================"));
  _intNeededTips1000=0;
  _intNeededTips300=0;
  _intNeededTips50=2*_intSampleNumber;
  Trace("==============================");
  Trace("Needed 1000ul Tips_____",_intNeededTips1000);
  Trace("Needed 300ul Tips_____",_intNeededTips300);
  Trace("Needed 50ul Tips_____",_intNeededTips50);
  Trace("==============================");
  TipReloading();
  ODTCCONTROLLER::OpenDoor();
  if (_blnShortODTC == 1)
  {
    if (_blnVersionLID == 1)
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod37_Lid50"), 10000);
    }
    else
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod37_Lid110"), 10000);
    }
  }
  else
  {
    if (_blnVersionLID == 1)
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod37_Lid50"), 1);
    }
    else
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod37_Lid110"), 1);
    }
  }
  SEQUENCECONTROLLER::CreateSequenceFromSequence(ML_STAR.TemplateSequenceB, Translate("HSP_Pipette"), seqDigestion);
  SEQUENCECONTROLLER::CreateBufferSequence(ML_STAR.seqDigestionMix, 1, _intSampleNumber, seqDigestionMix);
  if (_blnPostAmplification1Cleanup == 1)
  {
    if (_blnExtendBufferRemoval == 1)
    {
      DIALOGCONTROLLER::MessageToUser(Translate("Please Reload Tips.\n\nPress CONTINUE to resume the method."));
      DIALOGCONTROLLER::TipLoadingDialog();
      TIPLOADINGCONTROLLER::TipLoading_3TipTypes(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar50ulTipWithFilter, Translate("1000ulHighVolumeTipWithFilter"), Translate("300ulStandardVolumeTipWithFilter"), Translate("50ulTipWithFilter"));
      PIPETTINGCONTROLLER::Init(ML_STAR, Translate("50ulTipWithFilter"), ML_STAR.MlStar50ulTipWithFilter, Translate("300ulStandardVolumeTipWithFilter"), ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("1000ulHighVolumeTipWithFilter"), ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR.Waste08);
    }
    DIALOGCONTROLLER::MessageToUser(Translate("Please load Digestion Mix, Index Plate, Second PCR Mix and refill ETOH70%.\n\nPress CONTINUE to resume the method."));
    DIALOGCONTROLLER::DeckLoadingDialogParagon();
  }
  ODTCCONTROLLER::WaitForMethod();
  MECC::TraceComment(Translate("================================================================\n\nAssemble Digestion Reaction.\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Assemble Digestion Reaction"));
  PIPETTINGCONTROLLER::AddMixSurface(ML_STAR, seqDigestionMix, seqDigestion, 50, _fltDigestionMixVol, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_MasterMixOptimization"), -1, 1, 10, 18);
  ISWAPCONTROLLER::MovePCRPlate_Small(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_ODTC, 0, 0);
  ISWAPCONTROLLER::MoveConfortLid_Small(ML_STAR, ML_STAR.Ham_ComfortLid_Stack_ParkPos_0001, ML_STAR.Ham_ComfortLid_ODTC, 0, 0, _fltDeltaXLidMove);
  ODTCCONTROLLER::CloseDoor();
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Digestion on ODTC"));
  if (_blnSkipODTC == 0)
  {
    if (_blnShortODTC == 1)
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("Digestion_Short"), 1);
    }
    else
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("Digestion"), 1);
      if( 0 == Digestion.SetTimer(600) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == Digestion.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    ODTCCONTROLLER::WaitForMethod();
  }
  ODTCCONTROLLER::OpenDoor();
  ISWAPCONTROLLER::MoveConfortLid_Small(ML_STAR, ML_STAR.Ham_ComfortLid_ODTC, ML_STAR.Ham_ComfortLid_Stack_ParkPos_0001, 0, 0, _fltDeltaXLidReturn);
  ISWAPCONTROLLER::MovePCRPlate_Small(ML_STAR, ML_STAR.HSP_ODTC, ML_STAR.HSP_Pipette, 0, 1);
  MECC::TraceComment(Translate("================================================================\n\nSTOP Digestion.\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Stop Digestion"));
  PIPETTINGCONTROLLER::AddMixSurface(ML_STAR, ML_STAR.seqStopBuffer, seqDigestion, 50, _fltStopBufferVol, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_MasterMixOptimization"), -1, 1, 6, 20);
  ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod25_Lid110"), 10000);
  MECC::TraceComment(Translate("================================================================\n\nDigestion FINISH\n\n================================================================"));
}

private function P6_PostDigestionCleanup(  ) void {
  private variable loopCounterWash;
  private timer AirDry;
  private timer OnMagnet;
  private timer Elution;
  private timer Binding;
  private sequence seqCleanupOnMagnet;
  private sequence seqCleanup;
  private timer Delay;
  MECC::TraceComment(Translate("================================================================\n\nPost Digestion Cleanup START\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_SetText(Translate("=========================\nPost Digestion Cleanup\n========================="));
  MECC::TraceComment(Translate("================================================================\n\nNeeded Tips Calculation\n\n================================================================"));
  _intNeededTips1000=20;
  _intNeededTips300=(4*_intSampleNumber);
  _intNeededTips50=(2*_intSampleNumber);
  Trace("==============================");
  Trace("Needed 1000ul Tips_____",_intNeededTips1000);
  Trace("Needed 300ul Tips_____",_intNeededTips300);
  Trace("Needed 50ul Tips_____",_intNeededTips50);
  Trace("==============================");
  TipReloading();
  SEQUENCECONTROLLER::CreateSequenceFromSequence(ML_STAR.TemplateSequenceB, Translate("HSP_Pipette"), seqCleanup);
  SEQUENCECONTROLLER::CreateSequenceFromSequence(ML_STAR.TemplateSequenceB, Translate("HSP_PipetteOnMagnet"), seqCleanupOnMagnet);
  MECC::TraceComment(Translate("================================================================\n\nAdd Beads to samples.\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Mixing Magnetic Beads"));
  PIPETTINGCONTROLLER::MixBeads(ML_STAR, 4, _intSampleNumber, _fltBeads1Vol, ML_STAR.MagneticBeads);
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Add Magnetic Beads to samples"));
  PIPETTINGCONTROLLER::AddBeadsSurface(ML_STAR, ML_STAR.MagneticBeads, seqCleanup, 300, _fltBeads3Vol, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty_FastMoves"), -1, 2, 10, 45);
  if(0){
    PIPETTINGCONTROLLER::AddMixSurface(ML_STAR, ML_STAR.MagneticBeads, seqCleanup, 300, _fltBeads3Vol, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty_FastMoves"), -1, 2, 10, 45);
  }
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Binding"));
  if( 0 == Binding.SetTimer(_fltBinding3Timer) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == Binding.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  TRANSPORTCONTROLLER::MovePCRPlate(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_PipetteOnMagnet, 1, 1);
  if( 0 == OnMagnet.SetTimer(_fltOnMagnet3Timer) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == OnMagnet.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  PIPETTINGCONTROLLER::RemoveSupernatant(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 70, 300, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 2, 1, 0, 0, 0);
  if (_blnExtendBufferRemoval == 1)
  {
    PIPETTINGCONTROLLER::RemoveSupernatant(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 50, 50, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 0.5, -1, 1, 0, 0);
  }
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Washing"));
  {
    for(loopCounterWash = 0; loopCounterWash < 2;)
    {
      loopCounterWash = loopCounterWash + 1;
      PIPETTINGCONTROLLER::Aliquot(ML_STAR, ML_STAR.ETOH70, seqCleanupOnMagnet, 8, 1000, _fltETOH3Vol, 100, 100, 17, 50, Translate("HighVolumeFilter_Water_AliquotDispenseJet_Part_FastMoves"), Translate("HighVolumeFilter_Water_AliquotDispenseJet_Part_FastMoves"), 1, 0, Translate(""));
      TRANSPORTCONTROLLER::ShakePCRPlateByMoveSx(ML_STAR, ML_STAR.HSP_PipetteOnMagnet, 2, _intBeadsMigrationTime, 1, 1);
      if( 0 == Delay.SetTimer(10) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == Delay.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      PIPETTINGCONTROLLER::RemoveSupernatant(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 250, 300, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 10, 1, 0, 0, 0);
    }
  }
  PIPETTINGCONTROLLER::RemoveDropDown(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 20, 50, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 0.5, -1, 1, 0, 0);
  if(0){
    PIPETTINGCONTROLLER::RemoveSupernatant(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 50, 50, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 0.5, -1, 1, 0, 0);
  }
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Air Drying"));
  if( 0 == AirDry.SetTimer(_fltDrying3Timer) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == AirDry.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  TRANSPORTCONTROLLER::MovePCRPlate(ML_STAR, ML_STAR.HSP_PipetteOnMagnet, ML_STAR.HSP_Pipette, 1, 1);
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Add Elution to samples"));
  PIPETTINGCONTROLLER::AddElutionLIGHT(ML_STAR, seqCleanup, ML_STAR.BufferTE, seqCleanup, _fltTE3Vol, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_FastMoves"), -1, 0, 1, 0.5, 0.5);
  if( 0 == Elution.SetTimer(_fltElution3Timer) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == Elution.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("================================================================\n\nPost Digestion Cleanup FINISH\n\n================================================================"));
}

private function P8_PostSecondAmplificationCleanup(  ) void {
  private variable loopCounterWash;
  private timer AirDry;
  private timer OnMagnet;
  private timer Elution;
  private timer Binding;
  private sequence seqCleanupOnMagnet;
  private sequence seqCleanup;
  private sequence seqFinalLibraries;
  private timer Delay;
  MECC::TraceComment(Translate("================================================================\n\nPost Second Amplification Cleanup START\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_SetText(Translate("=========================\nPost Second Amplification Cleanup\n========================="));
  MECC::TraceComment(Translate("================================================================\n\nNeeded Tips Calculation\n\n================================================================"));
  _intNeededTips1000=20;
  _intNeededTips300=(4*_intSampleNumber);
  _intNeededTips50=(3*_intSampleNumber);
  Trace("==============================");
  Trace("Needed 1000ul Tips_____",_intNeededTips1000);
  Trace("Needed 300ul Tips_____",_intNeededTips300);
  Trace("Needed 50ul Tips_____",_intNeededTips50);
  Trace("==============================");
  TipReloading();
  SEQUENCECONTROLLER::CreateSequenceFromSequence(ML_STAR.TemplateSequenceB, Translate("HSP_Pipette"), seqCleanup);
  SEQUENCECONTROLLER::CreateSequenceFromSequence(ML_STAR.TemplateSequenceB, Translate("HSP_PipetteOnMagnet"), seqCleanupOnMagnet);
  SEQUENCECONTROLLER::CreateSequenceFromSequence(ML_STAR.TemplateSequenceA, Translate("HSP_Pipette2"), seqFinalLibraries);
  MECC::TraceComment(Translate("================================================================\n\nAdd Beads to samples.\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Mixing Magnetic Beads"));
  PIPETTINGCONTROLLER::MixBeads(ML_STAR, 4, _intSampleNumber, _fltBeads1Vol, ML_STAR.MagneticBeads);
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Add Magnetic Beads to samples"));
  PIPETTINGCONTROLLER::AddBeadsSurface(ML_STAR, ML_STAR.MagneticBeads, seqCleanup, 300, _fltBeads4Vol, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty_FastMoves"), -1, 1, 30, 75);
  if(0){
    PIPETTINGCONTROLLER::AddMixSurface(ML_STAR, ML_STAR.MagneticBeads, seqCleanup, 300, _fltBeads4Vol, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty_FastMoves"), -1, 1, 30, 75);
  }
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Binding"));
  if( 0 == Binding.SetTimer(_fltBinding4Timer) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == Binding.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  TRANSPORTCONTROLLER::MovePCRPlate(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_PipetteOnMagnet, 1, 1);
  if( 0 == OnMagnet.SetTimer(_fltOnMagnet4Timer) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == OnMagnet.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  PIPETTINGCONTROLLER::RemoveSupernatant(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 100, 300, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 2, 1, 0, 0, 0);
  if (_blnExtendBufferRemoval == 1)
  {
    PIPETTINGCONTROLLER::RemoveSupernatant(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 50, 50, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 0.5, -1, 1, 0, 0);
  }
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Washing"));
  {
    for(loopCounterWash = 0; loopCounterWash < 2;)
    {
      loopCounterWash = loopCounterWash + 1;
      PIPETTINGCONTROLLER::Aliquot(ML_STAR, ML_STAR.ETOH70, seqCleanupOnMagnet, 8, 1000, _fltETOH3Vol, 100, 100, 17, 50, Translate("HighVolumeFilter_Water_AliquotDispenseJet_Part_FastMoves"), Translate("HighVolumeFilter_Water_AliquotDispenseJet_Part_FastMoves"), 1, 0, Translate(""));
      TRANSPORTCONTROLLER::ShakePCRPlateByMoveSx(ML_STAR, ML_STAR.HSP_PipetteOnMagnet, 2, _intBeadsMigrationTime, 1, 1);
      if( 0 == Delay.SetTimer(10) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == Delay.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      PIPETTINGCONTROLLER::RemoveSupernatant(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 250, 300, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 10, 1, 0, 0, 0);
    }
  }
  PIPETTINGCONTROLLER::RemoveDropDown(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 20, 50, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 0.5, -1, 1, 0, 0);
  if(0){
    PIPETTINGCONTROLLER::RemoveSupernatant(ML_STAR, seqCleanupOnMagnet, ML_STAR.LiquidWaste, 50, 50, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_RemoveBuffer"), 0.5, -1, 1, 0, 0);
  }
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Air Drying"));
  if( 0 == AirDry.SetTimer(_fltDrying4Timer) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == AirDry.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  TRANSPORTCONTROLLER::MovePCRPlate(ML_STAR, ML_STAR.HSP_PipetteOnMagnet, ML_STAR.HSP_Pipette, 1, 1);
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Add Elution to samples"));
  PIPETTINGCONTROLLER::AddElutionLIGHT(ML_STAR, seqCleanup, ML_STAR.BufferTE, seqCleanup, _fltTE4Vol, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_FastMoves"), -1, 0, 1, 0.5, 0.5);
  if( 0 == Elution.SetTimer(_fltElution3Timer) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == Elution.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  TRANSPORTCONTROLLER::MovePCRPlate(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_PipetteOnMagnet, 1, 1);
  if( 0 == OnMagnet.SetTimer(30) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == OnMagnet.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  PIPETTINGCONTROLLER::TransferElution(ML_STAR, seqCleanupOnMagnet, seqCleanupOnMagnet, seqFinalLibraries, 12, 1, Translate("Tip_50ulFilter_DNA_DispenseSurface_Empty"), 0.5);
  TRANSPORTCONTROLLER::MovePCRPlate(ML_STAR, ML_STAR.HSP_PipetteOnMagnet, ML_STAR.HSP_Pipette, 1, 1);
  MECC::TraceComment(Translate("================================================================\n\nPost Digestion Cleanup FINISH\n\n================================================================"));
}

private function P7_SecondAmplification(  ) void {
  private sequence seqSecondAmplification;
  private sequence seqIndexingMix;
  private timer SecondAmplification;
  private sequence seqIndexes;
  MECC::TraceComment(Translate("================================================================\n\nSecond Amplification START\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_SetText(Translate("=========================\nSecond Amplification\n========================="));
  MECC::TraceComment(Translate("================================================================\n\nNeeded Tips Calculation\n\n================================================================"));
  _intNeededTips1000=0;
  _intNeededTips300=0;
  _intNeededTips50=2*_intSampleNumber;
  Trace("==============================");
  Trace("Needed 1000ul Tips_____",_intNeededTips1000);
  Trace("Needed 300ul Tips_____",_intNeededTips300);
  Trace("Needed 50ul Tips_____",_intNeededTips50);
  Trace("==============================");
  TipReloading();
  ODTCCONTROLLER::OpenDoor();
  if (_blnShortODTC == 1)
  {
    ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod25_Lid110"), 10000);
  }
  else
  {
    ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod25_Lid110"), 1);
  }
  SEQUENCECONTROLLER::CreateSequenceFromSequence(ML_STAR.TemplateSequenceB, Translate("HSP_Pipette"), seqSecondAmplification);
  SEQUENCECONTROLLER::CreateBufferSequence(ML_STAR.seqIndexingMix, 1, _intSampleNumber, seqIndexingMix);
  SEQUENCECONTROLLER::CreateSequenceFromArray(Translate("HHS3_HSP_Indexes"), _arr_strIndexPosID, seqIndexes);
  MECC::TraceComment(Translate("================================================================\n\nAssemble Second Amplification.\n\n================================================================"));
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Assemble Second Amplification"));
  PIPETTINGCONTROLLER::AddMixSurface(ML_STAR, seqIndexingMix, seqSecondAmplification, 50, _fltIndexingMixVol, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_MasterMixOptimization"), -1, 1, 10, 35);
  HHSCONTROLLER::Clamps_Close(ML_STAR, 3);
  PIPETTINGCONTROLLER::AddIndexSurface_Piercing(ML_STAR, seqIndexes, seqSecondAmplification, _fltIndexVol, Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_IndexAVR"), 20, 38);
  HHSCONTROLLER::Clamps_Open(ML_STAR, 3);
  ODTCCONTROLLER::WaitForMethod();
  ISWAPCONTROLLER::MovePCRPlate_Small(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_ODTC, 0, 0);
  ISWAPCONTROLLER::MoveConfortLid_Small(ML_STAR, ML_STAR.Ham_ComfortLid_Stack_ParkPos_0001, ML_STAR.Ham_ComfortLid_ODTC, 0, 0, _fltDeltaXLidMove);
  ODTCCONTROLLER::CloseDoor();
  DIALOGCONTROLLER::StatusDialog_AppendText(Translate("Second Amplification on ODTC"));
  if (_blnSkipODTC == 0)
  {
    if (_blnShortODTC == 1)
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("SecondAmplification_Short"), 1);
    }
    else
    {
      ODTCCONTROLLER::ExecuteMethod(Translate("SecondAmplification"), 1);
      if(0){
        if( 0 == SecondAmplification.SetTimer(4210) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      if( 0 == SecondAmplification.SetTimer(3750) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == SecondAmplification.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    ODTCCONTROLLER::WaitForMethod();
  }
  ODTCCONTROLLER::OpenDoor();
  ISWAPCONTROLLER::MoveConfortLid_Small(ML_STAR, ML_STAR.Ham_ComfortLid_ODTC, ML_STAR.Ham_ComfortLid_Waste, 0, 0, 0);
  ISWAPCONTROLLER::MovePCRPlate_Small(ML_STAR, ML_STAR.HSP_ODTC, ML_STAR.HSP_Pipette, 0, 1);
  ODTCCONTROLLER::ExecuteMethod(Translate("PreMethod25_Lid110"), 10000);
  MECC::TraceComment(Translate("================================================================\n\nDigestion FINISH\n\n================================================================"));
}

private function LibraryWorkflow(  ) void {
  if (_blnRT == 1)
  {
    P1_ReverseTranscription();
  }
  if (_blnPostRTCleanup == 1)
  {
    P2_PostRTCleanup();
  }
  if (_blnAmplification1 == 1)
  {
    P3_MultiplexAmplification();
  }
  if (_blnPostAmplification1Cleanup == 1)
  {
    P4_PostMultiplexAmplificationCleanup();
  }
  if (_blnDigestion == 1)
  {
    P5_Digestion();
  }
  if (_blnPostDigestionCleanup == 1)
  {
    P6_PostDigestionCleanup();
  }
  if (_blnAmplification2 == 1)
  {
    P7_SecondAmplification();
  }
  if (_blnPostAmplification2Cleanup == 1)
  {
    P8_PostSecondAmplificationCleanup();
  }
}

private function _VersionHistory(  ) void {
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  CleanPlex® SARS-CoV-2 FLEX Research and Surveillance Panels\nBy:          Pietro Ariani, Hamilton Italy \nVersion:  1.2\nBased on  Reference Guide (UG4002-02 November 2020)\nVersioning : see at tab \"_VersionHistory\"\n\n************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  CleanPlex® SARS-CoV-2 FLEX Research and Surveillance Panels\nBy:          Camilo Gomeu, Hamilton Bonaduz AG\nVersion:  1.3 Method Review befor ARW Download Tool upload\nBased on  Reference Guide (UG4002-02 November 2020)\nVersioning : see at tab \"_VersionHistory\"\n\n1. Creation of Verstion History\n2. Lid container Definition Included\n3. Input files were located at \"C:\\NGSStarInputFiles\\Paragon Genomics\\CleanPlex SARS CoV-2\" and dependencies were created.\n\n\n************************************************************************************************************************************"));
}
