#pragma once
#include "ArrayTools\\ArrayTools.hs_"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLStrLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLExtensions\\Array.hsl"
#include "HSLTrcLib.hsl"
#include "HSLExtensions\\Sequence.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLAppsLib.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLTimLib.hsl"
#include "StringTokenizer\\StrTokenize.hs_"
#include "HSLTipCountingLib.hsl"
#include "HSLExtensions\\String.hsl"
#include "HSLDevLib.hsl"
#include "HSLML_STARLib.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Qiagen\\QIAseq RNA Fusion XP Panels\\Library\\NGSStarLoading\\ARW_Global.hsl"
#include "Alpha Numeric Conversion\\Alpha Numeric Conversion.hs_"
#include "STAR Tools\\STAR Tip Tools.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace NGSSTARLOADING {
  global variable g_int_TotalNumberOf50Tips;
  global variable g_int_TotalNumberOfMIDI;
  global variable g_int_TotalNumberOf300Tips;
  global variable g_int_TotalNumberOfHSP;
  global variable g_int_TotalNumberOfComfortLid;
  global variable g_int_TotalNumberOf1000Tips;
  global variable g_str_InputWorklistFilePath;
  global variable g_bln_IndexesOnPlate(0);
  global variable g_bln_IndexesAreNeeded(0);
  global variable g_bln_ODTCInUse;
  variable t_strDirectoryName;
  variable t_blnPlatformNGSSTARused;
  global variable g_str_KitName;
  global variable g_str_KitProvider;
  variable t_str_LoadingPicturesFileDirectory;
  variable t_blnLockUnlockSystem;
  variable t_bln_TipSupportAdapterUsed;
  variable t_str_FullpathFile_RunData;
  variable t_str_FullPathReportFile;
  variable t_str_PlatformUsed;
  variable t_str_PicturesDirectoryUsed;
  variable t_str_HamiltonMainFileDirectory;
  variable file_RunData_DB_DeadVolumeLabware;
  variable file_MultipleChoice_DialogID;
  variable file_RunData_DB_Units;
  variable file_RunData_DB_DeadVolumePercent;
  variable file_MultipleChoice_ToolTip;
  variable file_RunData_DB_ReagentNameANDLabwareType;
  variable file_RunData_DB_CarrierName;
  variable file_MultipleChoice_GroupName;
  variable file_RunData_DB_ReagentType;
  variable file_RunData_DB_LabwareType;
  variable file_MultipleChoice_Editable;
  variable file_MultipleChoice_Label;
  variable file_RunData_DB_ReagentName;
  variable file_RunData_DB_LabwareName;
  variable file_RunData_DB_SiteID;
  variable file_RunData_DB_TotalVolume;
  variable file_MultipleChoice_Selected;
  variable file_RunData_DB_VolumePerWell;
  variable file_RunData_DB_PositionID;
  file file_RunData;
  file file_MultipleChoice;
  variable file_RunData_DB_PrepareMastermixOnDeck;
  variable file_RunData_DB_MasterMixComponentName;
  variable t_arr_strCarrierName_Distinct[];
  variable t_strTipCounterNameTip300;
  variable t_strTipCounterNameTip50;
  variable t_strTipCounterNameTip1000;
  sequence t_seqTips1000;
  sequence t_seqTips50;
  sequence t_seqTips300;
  sequence t_arr_seq_RGT_SequencesToAspirate[];
  variable t_arr_flt_RGT_TotalVolume[];
  variable t_arr_str_RGT_ReagentName[];
  variable t_arr_flt_VolumePerContainer[];
  sequence t_seqCreated_distinctPositions;
  variable file_MM_Preparation_Ratio;
  file file_MM_Preparation;
  variable t_str_LastMastermixName;
  variable t_arr_str_MasterMixTubeIDs[];
  variable t_arr_flt_RatioForComponets[];
  variable t_arr_str_MasterMixComponentIDs[];
  variable file_MM_Preparation_MastermixTube_ID;
  variable file_MM_Preparation_Mastermix_ID;
  variable file_MM_Preparation_VolumeMastermixPerTube;
  variable file_MM_Preparation_Component_ID;
  variable file_MM_Preparation_SourceComponentTube_ID;
  variable file_MM_Preparation_MastermixTube_LabwareID;
  variable file_MM_Preparation_VolumeComponentPerTube;
  variable file_MM_Preparation_SourceVolumeComponentPerTube;
  variable file_MM_Preparation_SourceComponentTube_LabwareID;
  variable file_RunData_DB_Ratio;
  variable t_bln_CheckAditionalBarcodes;
  private function Add_ContainerToRack( device & i_MLSTAR, variable i_strLabwareID, variable i_intPositionID, variable i_intNumberOfTubes, variable i_strConfigFile, variable i_intXOffset, variable i_intYOffset, variable i_intZOffset ) void ;
  function Add_LabwareForCurrentProcess( device & ML_STAR, variable i_str_LabwareType, variable i_str_LabwareName, variable i_int_NumberOfUnits, sequence & i_seq_Template, variable i_var_PositionInSequence ) void ;
  function Add_LabwareForCurrentProcess_MOA( device & ML_STAR, variable i_str_LabwareType, variable i_str_LabwareName, variable i_int_NumberOfUnits, sequence & i_seq_Template, variable i_var_PositionInSequence ) void ;
  function CUSTOMIZED_Read_InputWorklist_ExcelOrCSVFormat_QIAseqRNAFusionXPPanels( variable i_strSamplePlateFile, sequence i_seqSourceALPTemplate, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & o_arrListOfIndexSet[], variable & o_arrIndexSet[], variable & o_arrNumberIndexSet[], variable & o_arrIndexSeqPositions[], variable & o_arrIndexIDs[], variable & o_arrListOfPanelIDs[], variable & o_arrPanelSeqPositions[], variable & o_arrPanelIDs[], variable & o_arrNumberPanelIDs[], variable & o_intNumberOfPanels, variable & o_arrALPseqLabID[], variable & o_arrALPseqPositions[], variable & o_strIndexLabwareFormat ) void ;
  function Calculate_ReformatSequenceToMatchNumberOfSamples( device & ML_STAR, variable i_int_StartingPoint, sequence i_seq_Template, variable i_int_NumberOfSamples, sequence & o_seqCreated ) void ;
  function Calculate_TotalVolumeAndSequenceToAspirate( device & ML_STAR, variable i_str_ReagentName, variable i_int_NumberOfSamples, variable i_str_LabwareTypeId, variable i_flt_MaximumContainerVolume, variable i_flt_DeadVolumeLabware, variable i_flt_DeadVolumeReagent, sequence & i_seq_Template, variable i_int_StartingPoint, variable i_int_MinimumNumberOfContainers, sequence & o_seqCreated_distinctPositions, sequence & o_seqCreated_AdjustedtoNumberOfSamples, variable & o_arr_flt_VolumePerContainer[] ) void ;
  private function Calculate_TotalVolume_MastermixComponent( variable i_str_MastermixName, variable i_str_MastermixComponentName, variable i_flt_MastermixVolume, variable i_flt_MastermixTotalVolume, variable i_flt_MastermixComponentVolume, variable & o_flt_MastermixComponentTotalVolume, variable & o_flt_Ratio ) void ;
  function DATA_HandOverDataToSMT_NGSStarLoading( variable i_strFullPathReportFile, variable i_intARWPlatformUsed, variable i_strKitProvider, variable i_strKitName, variable i_blnMPHUsed, variable i_blnLockUnlockSystem, variable i_str_TipCounter50, variable i_str_TipCounter300, variable i_str_TipCounter1000, sequence & i_seq_Tips50, sequence & i_seq_Tips300, sequence & i_seq_Tips1000, variable i_bln_CheckBarcodesInAdditionToTips ) void ;
  private function DATA_TipCounterRead( device & ML_STAR, variable i_intNumberOfTip50_required, variable i_intNumberOfTip300_required, variable i_intNumberOfTip1000_required, variable i_intTipTypeToBeProcessed, variable i_blnAlwaysEditTipcounter, variable i_blnShowGUITipAndTimeCalculation ) void ;
  private function DATA_TipCounterRead_CustomTips( device & ML_STAR, variable i_intNumberOfTip50_required, variable i_intNumberOfTip300_required, variable i_intNumberOfTip1000_required, variable i_intTipTypeToBeProcessed, variable i_blnAlwaysEditTipcounter, variable i_blnShowGUITipAndTimeCalculation ) void ;
  private function DATA_TipCounterWrite( device & ML_STAR ) void ;
  private function Define_VolumePerBarcodeTube( variable & i_arr_BarcodeFrequency[], variable & i_arr_BarcodeDistinct[], variable i_int_NumberOfBarcodeTubes, variable i_str_BarcodeName, variable i_flt_VolumePerBarcode, variable & o_arr_BarcodeNamesAll[] ) variable ;
  function Define_VolumePerWell( variable i_str_LiquidName, variable i_flt_VolumePerSample ) variable ;
  function Define_VolumePerWell_MastermixComponent( variable i_str_MastermixLiquidName, variable i_str_ComponentLiquidName, variable i_flt_VolumePerSample ) variable ;
  function Display_Error_Dialog( variable i_str_ErrorMessage ) void ;
  function Display_InputWorklist_Dialog( variable & o_str_FileWorklistFullPath ) void ;
  function Display_Mastermix_Dialog(  ) void ;
  function Display_Message_Dialog( variable i_str_Message ) void ;
  function Display_SelectEmailAddress_Dialog( variable & o_str_EmailAddress ) void ;
  private function Display_SelectODTC_Dialog( variable & o_bln_ODTCSelection ) void ;
  function Display_SelectProcesses_Dialog( variable i_int_MethodSelection, variable & i_arr_strProcessId[], variable & i_arr_strProcessCombinations[], variable & i_arr_intProcessDeactivatedStartPoints[], variable & i_arr_intProcessDeactivatedStopPoints[], variable & o_int_StartProcess, variable & o_int_StopProcess, variable & o_arr_blnProcessActivationStatus[] ) void ;
  function Evaluate_ResourcesByCarrier(  ) void ;
  function Load_Carrier( device & ML_STAR, variable i_str_CarrierID, variable i_bln_SkipLoadingRoutine, variable i_bln_IsItLoadable, variable i_bln_LoadCarrierOnly_NoDialogs, variable i_str_MainImageName, variable i_str_SubImageName ) variable ;
  function Load_Carrier_MultiTipSeq( device & ML_STAR, variable i_str_CarrierID, variable i_bln_SkipLoadingRoutine, variable i_bln_IsItLoadable, variable i_bln_LoadCarrierOnly_NoDialogs, variable i_str_MainImageName, variable i_str_SubImageName ) variable ;
  function Load_Carrier_WithoutBarcodeReading( device & ML_STAR, variable i_str_CarrierID, variable i_bln_SkipLoadingRoutine, variable i_bln_IsItLoadable, variable i_bln_LoadCarrierOnly_NoDialogs, variable i_str_MainImageName, variable i_str_SubImageName ) variable ;
  function MMPrep_GetSequencesAndVolumes( variable i_str_ComponentName, sequence & o_seq_AspirateComponents, sequence & o_seq_DispenseComponents, variable & o_arr_fltVolumeComponents[] ) void ;
  function MultipleChoiceDialog_DefineChoiceElement( variable i_int_DialogId, variable i_str_GroupName, variable i_str_Label ) void ;
  function MultipleChoiceDialog_DisplayDialog( variable i_int_DialogID ) void ;
  function MultipleChoiceDialog_RetrieveUserSelection( variable i_int_DialogID, variable i_str_GroupName, variable & o_int_OptionSelected ) void ;
  function Read_InputWorklist_ExcelOrCSVFormat( variable i_strSamplePlateFile, sequence i_seqSourceALPTemplate, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & o_arrIndex1SeqPositions[], variable & o_arrIndex1IDs[], variable & o_arrIndex2SeqPositions[], variable & o_arrIndex2IDs[], variable & o_arrALPseqLabID[], variable & o_arrALPseqPositions[], variable & o_strIndexLabwareFormat ) void ;
  function Read_InputWorklist_ExcelOrCSVFormat_QIAseqTargetedDNAProPanel_backUp( variable i_strSamplePlateFile, sequence i_seqSourceALPTemplate, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & o_arrListOfIndexSet[], variable & o_arrIndexSet[], variable & o_arrNumberIndexSet[], variable & o_arrIndex1SeqPositions[], variable & o_arrIndex1IDs[], variable & o_arrIndex2SeqPositions[], variable & o_arrIndex2IDs[], variable & o_arrListOfPanelIDs[], variable & o_arrPanelSeqPositions[], variable & o_arrPanelIDs[], variable & o_arrNumberPanelIDs[], variable & o_intNumberOfPanels, variable & o_arrALPseqLabID[], variable & o_arrALPseqPositions[], variable & o_strIndexLabwareFormat ) void ;
  function Retrieve_50mlTrough_ReagentsVolumesAndSequences( variable & o_arr_ReagentNames[], variable & o_arr_ReagentTotalVolumes[], sequence & o_arr_ReagentSequences[] ) void ;
  private function _Abstract(  ) void ;
  function _CheckBindReturnValueVectorCustomDialogs( variable i_intBindReturnValue ) void ;
  private function _ConvertValueToString( variable i_value, variable & o_str_ConvertedValue ) void ;
  private function _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport( variable i_strStepReturnValueLoadingStep ) void ;
  private function _DATA_TranslateAutoLoadErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedAutoLoadInformaton ) void ;
  private function _Display_LoadCarrier_Dialog( variable i_str_ImagePath, variable i_str_SmallImagePath, variable i_str_TextTop, variable & i_arr_DataColumn1[], variable & i_arr_DataColumn2[], variable & i_arr_DataColumn3[] ) void ;
  private function _GenerateString( variable i_flt_Volume, variable & o_str_Description ) void ;
  private function _GetCarrierIDandSiteID_FromLabID( device & ML_STAR, variable i_str_LabID, variable & o_str_CarrierID, variable & o_str_SiteID ) variable ;
  private function _PrintToFile( variable & i_arr_strCol1[], variable & i_arr_strCol2[], variable & i_arr_strCol3[] ) void ;
  private function _Reformat_ValuesForDialog( variable i_flt_valueToReformat, variable i_str_units, variable & o_str_valueFormatted ) void ;
  private function _Reset_FileRunData_Variables(  ) void ;
  private function _RunDATA_AddRecord( variable i_str_ColumnName, variable i_value, variable i_int_FileHandler ) variable ;
  private function _RunDATA_Find_Record( variable i_str_ColumnName, variable i_value, variable i_CarrierName, variable i_int_FileHandler, variable & o_intNumberOfElementsFound ) variable ;
  private function _RunDATA_UpdateRecord( variable i_str_SheetName, variable i_str_ColumnName, variable i_keyNewValue, variable i_str_ColumnReference, variable i_keyValueReference ) void ;
  private function _SortElements( variable & io_arrColumn1[], variable & io_arrColumn2[], variable & io_arrColumn3[], variable i_intSortByColumn ) void ;
  private function _Version_History(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ARRAYTOOLS::_InitLibrary();
    STRTOKENIZE::_InitLibrary();
    ANC::_InitLibrary();
    STAR_TIP_TOOLS::_InitLibrary();
  }
  function _ExitLibrary() {
    ARRAYTOOLS::_ExitLibrary();
    STRTOKENIZE::_ExitLibrary();
    ANC::_ExitLibrary();
    STAR_TIP_TOOLS::_ExitLibrary();
  }

  function Display_InputWorklist_Dialog( variable & o_str_FileWorklistFullPath ) void {
    private variable l_str_FileFilter;
    private variable l_intReturnDisplayDialog;
    private variable i_str_fileFormat;
    private variable l_strErrorMessage;
    private variable loopCounter2;
    private variable l_int_rtnErrorDialog;
    o_str_FileWorklistFullPath = 0;
    l_str_FileFilter = Translate("*");
    _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
    l_str_FileFilter = StrConcat4(i_str_fileFormat, Translate(" files allowed|*."), Translate("*"), Translate(""));
    {
      loopCounter2 = 0;
      while (1 == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        l_strErrorMessage = StrConcat4(Translate("Error during previous selection of a worklist "), Translate("Select again a worklist - "), Translate("Trial : "), loopCounter2);
        l_intReturnDisplayDialog = VectorCustomDialogs::FileBrowserDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, Translate("Please select Input File Worklist"), VectorCustomDialogs::FileBrowserDialog::DialogType::Open, l_str_FileFilter, 1, Translate(""), o_str_FileWorklistFullPath);
        _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
        t_strDirectoryName = HSLExtensions::File::GetDirectoryName(o_str_FileWorklistFullPath);
        Trace("l_intReturnDisplayDialog : ",l_intReturnDisplayDialog);
        if (l_intReturnDisplayDialog == 2)
        {
          VectorCustomDialogs::MessageDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("User pressed abort"));
          abort;
        }
        else
        {
          if (l_intReturnDisplayDialog == -9)
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, l_strErrorMessage);
            _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }
          else
          {
            if (o_str_FileWorklistFullPath == "")
            {
              l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, l_strErrorMessage);
              _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            }
            else
            {
              g_str_InputWorklistFilePath = o_str_FileWorklistFullPath;
              break;
            }
          }
        }
      }
    }
  }

  private function Display_SelectODTC_Dialog( variable & o_bln_ODTCSelection ) void {
    private variable l_int_ODTCSelection;
    private variable l_strFullpathLoadingPicture;
    private variable l_int_rtnErrorDialog;
    o_bln_ODTCSelection = 0;
    _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
    l_strFullpathLoadingPicture = StrConcat12(t_str_LoadingPicturesFileDirectory, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("ODTC.png"), Translate(""), Translate(""), Translate(""), Translate(""));
    l_int_ODTCSelection = VectorCustomDialogs::MessageDialogWithImage(Translate("Select ODTC"), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Is ODTC required this run?"), l_strFullpathLoadingPicture, 0);
    _CheckBindReturnValueVectorCustomDialogs(l_int_ODTCSelection);
    if (l_int_ODTCSelection == 7)
    {
      o_bln_ODTCSelection = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      o_bln_ODTCSelection = ASWGLOBAL::BOOL::TRUE;
    }
  }

  function Display_SelectEmailAddress_Dialog( variable & o_str_EmailAddress ) void {
    private variable l_arr_DataTypes[];
    private variable l_arr_Result[];
    private variable l_arr_ListLabels[];
    private variable l_arr_ListUnits[];
    private variable l_arr_ListValues[];
    private variable l_arr_CustomToolTip[];
    private variable l_arr_Ranges[];
    private variable l_bln_DisplayDialog;
    private variable loopCounter1;
    private variable l_int_StrFindCharacter;
    private variable l_int_LengthString;
    private variable l_intReturnDisplayDialog;
    private variable l_int_rtnErrorDialog;
    o_str_EmailAddress = 0;
    _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
    l_arr_CustomToolTip.SetSize(0);
    l_arr_DataTypes.SetSize(0);
    l_arr_CustomToolTip.SetSize(0);
    l_arr_ListLabels.SetSize(0);
    l_arr_ListUnits.SetSize(0);
    l_arr_ListValues.SetSize(0);
    l_arr_Ranges.SetSize(0);
    l_arr_Result.SetSize(0);
    l_bln_DisplayDialog = ASWGLOBAL::BOOL::TRUE;
    l_arr_CustomToolTip.AddAsLast(Translate("e-mail Address ###@###.com"));
    l_arr_DataTypes.AddAsLast(2);
    l_arr_ListLabels.AddAsLast(Translate("String"));
    l_arr_ListUnits.AddAsLast(Translate("e-mail address"));
    l_arr_ListValues.AddAsLast(Translate(""));
    l_arr_Ranges.AddAsLast(Translate("0|100"));
    {
      loopCounter1 = 0;
      while (l_bln_DisplayDialog == ASWGLOBAL::BOOL::TRUE)
      {
        loopCounter1 = loopCounter1 + 1;
        l_intReturnDisplayDialog = VectorCustomDialogs::InputDialog(Translate(""), VectorCustomDialogs::ButtonType::Ok, 0, 0, Translate("Enter email address to receive e-mails, otherwise leave it empty"), Translate("Press OK to Continue"), l_arr_ListLabels, l_arr_ListValues, l_arr_ListUnits, l_arr_DataTypes, l_arr_Ranges, l_arr_CustomToolTip, l_arr_Result);
        _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
        o_str_EmailAddress=l_arr_Result.GetAt(1-1);
        l_int_LengthString = StrGetLength(o_str_EmailAddress);
        if (l_int_LengthString > 0)
        {
          l_int_StrFindCharacter = StrFind(o_str_EmailAddress, Translate("@"));
          if (l_int_StrFindCharacter <= 0)
          {
            l_bln_DisplayDialog = ASWGLOBAL::BOOL::TRUE;
          }
          else
          {
            l_bln_DisplayDialog = ASWGLOBAL::BOOL::FALSE;
          }
          if (l_bln_DisplayDialog == ASWGLOBAL::BOOL::TRUE)
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Wrong format for e-mail address. Please include a valid e-mail address"));
            _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }
        }
        else
        {
          l_bln_DisplayDialog = ASWGLOBAL::BOOL::FALSE;
        }
      }
    }
  }

  private function _Reformat_ValuesForDialog( variable i_flt_valueToReformat, variable i_str_units, variable & o_str_valueFormatted ) void {
    private variable str_io_strValueToReformat;
    private variable l_strVariableType;
    private variable io_valueToReformat;
    private variable intStrFindResult;
    private variable l_int_NumberOfDecimalPoints;
    private variable l_intTopVolume;
    o_str_valueFormatted = 0;
    l_strVariableType = StrGetType(i_flt_valueToReformat);
    if (l_strVariableType != "s")
    {
      if (l_strVariableType == "i")
      {
        io_valueToReformat = StrIStr(i_flt_valueToReformat);
      }
      if (l_strVariableType == "f")
      {
        if (i_str_units == "uL")
        {
          l_intTopVolume = 3000;
        }
        else
        {
          l_intTopVolume = 3;
        }
        if (i_flt_valueToReformat <= l_intTopVolume)
        {
          l_int_NumberOfDecimalPoints = 3;
        }
        else
        {
          l_int_NumberOfDecimalPoints = 2;
        }
        i_flt_valueToReformat = MthRound(i_flt_valueToReformat, l_int_NumberOfDecimalPoints);
        str_io_strValueToReformat = StrConcat2(Translate(""), i_flt_valueToReformat);
        intStrFindResult = StrFind(str_io_strValueToReformat, Translate("."));
        if (intStrFindResult != -1)
        {
          intStrFindResult = intStrFindResult + l_int_NumberOfDecimalPoints;
          o_str_valueFormatted = StrLeft(str_io_strValueToReformat, intStrFindResult);
        }
        else
        {
          o_str_valueFormatted = str_io_strValueToReformat;
        }
      }
    }
    else
    {
      if (i_flt_valueToReformat <= l_intTopVolume)
      {
        l_int_NumberOfDecimalPoints = 3;
      }
      else
      {
        l_int_NumberOfDecimalPoints = 2;
      }
      i_flt_valueToReformat = MthRound(i_flt_valueToReformat, l_int_NumberOfDecimalPoints);
      str_io_strValueToReformat = StrConcat2(Translate(""), i_flt_valueToReformat);
      intStrFindResult = StrFind(str_io_strValueToReformat, Translate("."));
      if (intStrFindResult != -1)
      {
        intStrFindResult = intStrFindResult + l_int_NumberOfDecimalPoints;
        o_str_valueFormatted = StrLeft(str_io_strValueToReformat, intStrFindResult);
      }
      else
      {
        o_str_valueFormatted = str_io_strValueToReformat;
      }
    }
  }

  private function _ConvertValueToString( variable i_value, variable & o_str_ConvertedValue ) void {
    private variable l_str_ValueType;
    o_str_ConvertedValue = 0;
    l_str_ValueType = StrGetType(i_value);
    if (l_str_ValueType == "i")
    {
      o_str_ConvertedValue = StrIStr(i_value);
    }
    if (l_str_ValueType == "f")
    {
      o_str_ConvertedValue = StrFStr(i_value);
    }
    if (l_str_ValueType == "s")
    {
      o_str_ConvertedValue = i_value;
    }
  }

  private function Calculate_TotalVolume_MastermixComponent( variable i_str_MastermixName, variable i_str_MastermixComponentName, variable i_flt_MastermixVolume, variable i_flt_MastermixTotalVolume, variable i_flt_MastermixComponentVolume, variable & o_flt_MastermixComponentTotalVolume, variable & o_flt_Ratio ) void {
    private variable l_flt_MastermixComponentTotalVolume;
    private variable l_flt_Ratio;
    o_flt_MastermixComponentTotalVolume = 0;
    o_flt_Ratio = 0;
    l_flt_MastermixComponentTotalVolume = 0.0;
    l_flt_Ratio = 0.0;
    TrcTrace("------- Calculate Volume for the next Mastermix Component ",i_str_MastermixComponentName);
    TrcTrace("----------------------------------Component of Mastermix: ",i_str_MastermixName);
    TrcTrace("---------------------------------- i_flt_MastermixComponentVolume: ",i_flt_MastermixComponentVolume);
    TrcTrace("---------------------------------- i_flt_MastermixTotalVolume: ",i_flt_MastermixTotalVolume);
    TrcTrace("---------------------------------- i_flt_MastermixVolume: ",i_flt_MastermixVolume);
    l_flt_MastermixComponentTotalVolume = (i_flt_MastermixComponentVolume * i_flt_MastermixTotalVolume)/i_flt_MastermixVolume;
    TrcTrace("Volume calculated (ul): ", l_flt_MastermixComponentTotalVolume);
    l_flt_Ratio = (i_flt_MastermixComponentVolume / i_flt_MastermixVolume);
    TrcTrace("Ratio: ", l_flt_Ratio);
    o_flt_MastermixComponentTotalVolume = l_flt_MastermixComponentTotalVolume;
    o_flt_Ratio = l_flt_Ratio;
  }

  private function _GetCarrierIDandSiteID_FromLabID( device & ML_STAR, variable i_str_LabID, variable & o_str_CarrierID, variable & o_str_SiteID ) variable {
    private variable var_return;
    private variable l_labware_ID;
    private variable l_site_ID;
    private variable l_carrier_ID;
    o_str_CarrierID = 0;
    o_str_SiteID = 0;
    var_return = 0;
    l_labware_ID = Translate("");
    l_labware_ID = i_str_LabID;
    l_site_ID = Translate("");
    l_carrier_ID = Translate("");
    {
        object obj_Decklayout;
        obj_Decklayout = ML_STAR.GetDeckLayoutObject();
        if (!obj_Decklayout.IsNull())
            {
                  object EditDecklayout5;
                  object Parameter;
                  object LabwareObjects;
                  object LabwareNames;
                  variable Array_Keys[];
                  variable intCounter;
                  obj_Decklayout.GetObject("IEditDeckLayout5", EditDecklayout5);
                  LabwareObjects.CreateObject("HXPARAMSLib.HxPars");
                  LabwareNames.CreateObject("HXPARAMSLib.HxPars");
                  obj_Decklayout.TemplateLabwareNames(LabwareObjects);
                  Array_Keys = LabwareObjects.GetKeys();
                  for(intCounter=1; intCounter<=Array_Keys.GetSize(); intCounter++)
                  {
                      LabwareNames = LabwareObjects.Item1(intCounter);
                      if(LabwareNames.Item1("Labwr_Id") == l_labware_ID)
                      {
                          var_return = 1;
                          l_site_ID=LabwareNames.Item1("Labwr_DkSiteId");
                          l_carrier_ID=LabwareNames.Item1("Labwr_TemplateId");
                      }
                  }
                  obj_Decklayout.ReleaseObject();
                  EditDecklayout5.ReleaseObject();
                  Parameter.ReleaseObject();
           }
    }
    if (l_carrier_ID == "default")
    {
      o_str_CarrierID = l_labware_ID;
    }
    else
    {
      o_str_CarrierID = l_carrier_ID;
    }
    o_str_SiteID = l_site_ID;
    return (var_return);
  }

  function Display_Mastermix_Dialog(  ) void {
    private variable l_arr_strColumnHeaders[];
    private variable l_intReturnDisplayDialog;
    private variable l_strBottomText;
    private variable l_strFullpathLoadingPicture;
    private variable l_int_rtnErrorDialog;
    private variable l_int_NumberOfCharacters;
    private variable l_int_CharacterFound;
    private variable l_str_SQLSentence;
    private variable l_int_LengthString;
    private variable l_str_TotalVolume;
    private variable loopCounter4;
    private variable l_str_Units_LabwareType_Volume;
    private variable l_arr_strMastermixNames[];
    private variable l_arr_strMastermixLabwareType[];
    private variable l_arr_strMastermixVolumes[];
    private variable l_int_NumberOfMastermixToDisplay;
    private variable l_int_CharacterFound_EmptyVolume;
    private variable file_RunData_DB_MasterMixComponentName_reformatted;
    l_arr_strMastermixNames.SetSize(0);
    l_arr_strMastermixVolumes.SetSize(0);
    l_arr_strMastermixLabwareType.SetSize(0);
    l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_ReagentType] <> 'Reagent' AND [DB_ReagentType] <> 'LabwareResource'","","","","","","","","","","","");
    Trace(l_str_SQLSentence);
    file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
    file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
    file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
    file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
    file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
    file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
    file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
    file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
    file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
    file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
    file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
    file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
    file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
    file_RunData.AddField("DB_PrepareMastermixOnDeck", file_RunData_DB_PrepareMastermixOnDeck, hslInteger);
    file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
    if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, l_str_SQLSentence) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
    }
    {
      loopCounter4 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter4 = loopCounter4 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (file_RunData_DB_ReagentType == ARW_Global::ReagentType::MastermixComponent)
        {
          file_RunData_DB_MasterMixComponentName_reformatted = StrConcat4(Translate(" ---  "), file_RunData_DB_MasterMixComponentName, Translate(""), Translate(""));
          l_arr_strMastermixNames.AddAsLast(file_RunData_DB_MasterMixComponentName_reformatted);
        }
        else
        {
          l_arr_strMastermixNames.AddAsLast(file_RunData_DB_ReagentName);
        }
        _ConvertValueToString(file_RunData_DB_TotalVolume, l_str_TotalVolume);
        _Reformat_ValuesForDialog(file_RunData_DB_TotalVolume, Translate("uL"), l_str_TotalVolume);
        l_int_LengthString = StrGetLength(file_RunData_DB_ReagentNameANDLabwareType);
        l_int_CharacterFound = StrFind(file_RunData_DB_ReagentNameANDLabwareType, Translate("-->"));
        l_int_NumberOfCharacters = l_int_LengthString - l_int_CharacterFound -3;
        l_str_Units_LabwareType_Volume = StrRight(file_RunData_DB_ReagentNameANDLabwareType, l_int_NumberOfCharacters);
        l_arr_strMastermixLabwareType.AddAsLast(l_str_Units_LabwareType_Volume);
        l_int_CharacterFound_EmptyVolume = StrFind(l_str_Units_LabwareType_Volume, Translate("Empty"));
        if (l_int_CharacterFound_EmptyVolume >= 0)
        {
          l_arr_strMastermixVolumes.AddAsLast(Translate(""));
        }
        else
        {
          l_arr_strMastermixVolumes.AddAsLast(l_str_TotalVolume);
        }
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    l_int_NumberOfMastermixToDisplay=l_arr_strMastermixNames.GetSize();
    Util2::Debug::TraceArray_3(Translate(""), l_arr_strMastermixNames, l_arr_strMastermixVolumes, l_arr_strMastermixLabwareType);
    if (l_int_NumberOfMastermixToDisplay > 0)
    {
      l_arr_strColumnHeaders.SetSize(0);
      l_arr_strColumnHeaders.AddAsLast(Translate("Name"));
      l_arr_strColumnHeaders.AddAsLast(Translate("Volume (µL)"));
      l_arr_strColumnHeaders.AddAsLast(Translate("Labware Type and [Volume per tube]"));
      l_int_rtnErrorDialog = VectorCustomDialogs::LoadingDialogSetResources(l_arr_strColumnHeaders);
      _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
      l_strBottomText = StrConcat4(Translate("A .csv file will be automatically created at following directory : "), Translate("\nC:\\Program Files (x86)\\HAMILTON\\Logfiles\\"), Translate(""), Translate(""));
      l_strFullpathLoadingPicture = StrConcat12(t_str_LoadingPicturesFileDirectory, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("MasterMix.png"), Translate(""), Translate(""), Translate(""), Translate(""));
      l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Prepare Mastermix according to instructions below. Press OK to Continue"), l_strBottomText, l_strFullpathLoadingPicture, Translate(""), 300, l_arr_strMastermixNames, l_arr_strMastermixVolumes, l_arr_strMastermixLabwareType);
      _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
      _PrintToFile(l_arr_strMastermixNames, l_arr_strMastermixVolumes, l_arr_strMastermixLabwareType);
    }
  }

  function Define_VolumePerWell( variable i_str_LiquidName, variable i_flt_VolumePerSample ) variable {
    private variable l_str_SQLSentence;
    private variable loopCounter1;
    private variable l_int_RecordCounter;
    private variable l_flt_TempVolumePerWell;
    MECC::TraceComment(Translate("\n"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_str_LiquidName: "), i_str_LiquidName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_flt_VolumePerSample: "), i_flt_VolumePerSample);
    _Reset_FileRunData_Variables();
    l_int_RecordCounter = 0;
    l_str_SQLSentence = Translate("");
    l_flt_TempVolumePerWell = 0;
    l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_ReagentName] = '",i_str_LiquidName,"'","","","","","","","","","");
    //Trace(l_str_SQLSentence);
    file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
    file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
    file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
    file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
    file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
    file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
    file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
    file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
    file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
    file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
    file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
    file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
    file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
    if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData", hslRead, l_str_SQLSentence) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_int_RecordCounter = l_int_RecordCounter + 1;
        l_flt_TempVolumePerWell = l_flt_TempVolumePerWell + file_RunData_DB_VolumePerWell;
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    if (l_int_RecordCounter > 0)
    {
      MECC::TraceComment(Translate("Liquid Name Found in DB_ReagentName Column"));
      l_flt_TempVolumePerWell = l_flt_TempVolumePerWell + i_flt_VolumePerSample;
      l_str_SQLSentence = StrConcat12("UPDATE [RunData$] SET [DB_VolumePerWell] = ",l_flt_TempVolumePerWell," WHERE [DB_ReagentName] = '",i_str_LiquidName,"'","","","","","","","");
      Trace(l_str_SQLSentence);
      file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
      file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
      file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
      file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
      file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
      file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
      file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
      file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
      file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
      file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
      file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
      file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
      file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, l_str_SQLSentence) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
    }
    else
    {
      MECC::TraceComment(Translate("Liquid Name NOT Found in DB_ReagentName Column"));
      file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
      file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
      file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
      file_RunData_DB_VolumePerWell = i_flt_VolumePerSample;
      file_RunData_DB_ReagentName = i_str_LiquidName;
      file_RunData_DB_ReagentType = ARW_Global::ReagentType::Reagent;
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_ReagentType: "), file_RunData_DB_ReagentType);
      if( 0 == file_RunData.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
    }
    return (i_flt_VolumePerSample);
  }

  function Display_Error_Dialog( variable i_str_ErrorMessage ) void {
    private variable l_int_rtnErrorDialog;
    _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
    l_int_rtnErrorDialog = VectorCustomDialogs::ErrorDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, i_str_ErrorMessage, Translate("Press OK to abort run"));
    _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
    abort;
  }

  function Define_VolumePerWell_MastermixComponent( variable i_str_MastermixLiquidName, variable i_str_ComponentLiquidName, variable i_flt_VolumePerSample ) variable {
    private variable l_str_SQLSentence;
    private variable l_str_ReagentType;
    private variable l_bln_ErrorUpdating;
    private variable loopCounter1;
    private timer l_timer_RecoverError;
    private variable l_flt_Ratio;
    private variable l_flt_CurrentMasterMix_Volume;
    _Reset_FileRunData_Variables();
    l_str_ReagentType = ARW_Global::ReagentType::Mastermix;
    l_bln_ErrorUpdating = ASWGLOBAL::BOOL::TRUE;
    {
      loopCounter1 = 0;
      while (l_bln_ErrorUpdating == ASWGLOBAL::BOOL::TRUE)
      {
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_1 ;
        err.Clear();
        l_flt_Ratio = 1.0;
        _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_Ratio"), l_flt_Ratio, Translate("DB_ReagentName"), i_str_MastermixLiquidName);
        _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_ReagentType"), ARW_Global::ReagentType::Mastermix, Translate("DB_ReagentName"), i_str_MastermixLiquidName);
        l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_ReagentName] = '",i_str_MastermixLiquidName,"'","","","","","","","","","");
        Trace(l_str_SQLSentence);
        file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
        file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
        file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
        file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
        file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
        file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
        file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
        file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
        file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
        file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
        file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
        file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
        file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
        file_RunData.AddField("DB_PrepareMastermixOnDeck", file_RunData_DB_PrepareMastermixOnDeck, hslInteger);
        file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
        if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, l_str_SQLSentence) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
        }
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_flt_CurrentMasterMix_Volume = file_RunData_DB_VolumePerWell;
        if( 0 != file_RunData.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file_RunData.RemoveFields();
        l_bln_ErrorUpdating = ASWGLOBAL::BOOL::FALSE;
        errLabel_1 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          if (loopCounter1 == 3)
          {
            Display_Error_Dialog(Translate("Cannot update DB. Restart protocol"));
          }
          l_bln_ErrorUpdating = ASWGLOBAL::BOOL::TRUE;
          if( 0 == l_timer_RecoverError.SetTimer(2) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_timer_RecoverError.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }   /* end if from skip handler if no error */
      }
    }
    TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, Translate("Adding to File "), i_flt_VolumePerSample, Translate(" µL of "), Translate(""), Translate(""), i_str_ComponentLiquidName, Translate(" of Mastermix "), i_str_MastermixLiquidName, Translate(""), Translate(""));
    file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
    file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
    file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
    file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
    file_RunData.AddField("DB_Ratio", file_RunData_DB_Ratio, hslFloat);
    if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
    }
    file_RunData_DB_VolumePerWell = i_flt_VolumePerSample;
    file_RunData_DB_ReagentName = i_str_ComponentLiquidName;
    file_RunData_DB_ReagentName = StrConcat12(i_str_ComponentLiquidName, Translate(" - "), i_str_MastermixLiquidName, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    file_RunData_DB_ReagentType = ARW_Global::ReagentType::MastermixComponent;
    file_RunData_DB_MasterMixComponentName = i_str_ComponentLiquidName;
    file_RunData_DB_Ratio = i_flt_VolumePerSample / (l_flt_CurrentMasterMix_Volume * 1.0);
    if( 0 == file_RunData.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    return (file_RunData_DB_VolumePerWell);
  }

  private function _GenerateString( variable i_flt_Volume, variable & o_str_Description ) void {
    private variable l_str_TotalVolumePerContainer;
    private variable l_str_UnitsVolume;
    private variable l_flt_TotalVolumePerContainerML;
    o_str_Description = 0;
    if (i_flt_Volume > 3000)
    {
      l_str_UnitsVolume = Translate("mL");
      l_flt_TotalVolumePerContainerML = i_flt_Volume / (1000 * 1.0);
      _Reformat_ValuesForDialog(l_flt_TotalVolumePerContainerML, Translate("mL"), l_str_TotalVolumePerContainer);
    }
    else
    {
      _Reformat_ValuesForDialog(i_flt_Volume, Translate("uL"), l_str_TotalVolumePerContainer);
      l_str_UnitsVolume = Translate("µL");
    }
    o_str_Description = StrConcat12(Translate(""), l_str_TotalVolumePerContainer, Translate(""), l_str_UnitsVolume, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  }

  private function _Version_History(  ) void {
  }

  function MultipleChoiceDialog_DisplayDialog( variable i_int_DialogID ) void {
    private variable l_arr_DB_MultipleChoiceDialog_Labels[];
    private variable l_arr_DB_MultipleChoiceDialog_IsEditable[];
    private variable l_arr_DB_MultipleChoiceDialog_IsSelected[];
    private variable l_arr_DB_MultipleChoiceDialog_GroupNames[];
    private variable l_arr_DB_MultipleChoiceDialog_ToolTips[];
    private variable l_int_NumberOfChoices;
    private variable l_int_rtnErrorDialog;
    private variable loopCounter1;
    private variable l_str_SQLSentence;
    private variable loopCounter2;
    private variable l_str_CurrentLabel;
    private variable l_str_CurrentGroupName;
    private variable l_str_FunctionName;
    l_str_FunctionName = Translate("");
    l_str_FunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    if(0){
      _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
    }
    l_arr_DB_MultipleChoiceDialog_GroupNames.SetSize(0);
    l_arr_DB_MultipleChoiceDialog_IsEditable.SetSize(0);
    l_arr_DB_MultipleChoiceDialog_IsSelected.SetSize(0);
    l_arr_DB_MultipleChoiceDialog_Labels.SetSize(0);
    l_arr_DB_MultipleChoiceDialog_ToolTips.SetSize(0);
    l_str_SQLSentence = Translate("");
    l_str_SQLSentence = StrConcat12("SELECT * FROM [MultipleChoiceDialog_Definition$] WHERE [DialogID] = ","","",i_int_DialogID,"","","","","","","","");
    Trace(l_str_SQLSentence);
    file_MultipleChoice.AddField("DialogID", file_MultipleChoice_DialogID, hslInteger);
    file_MultipleChoice.AddField("GroupName", file_MultipleChoice_GroupName, hslString, 255);
    file_MultipleChoice.AddField("Label", file_MultipleChoice_Label, hslString, 255);
    file_MultipleChoice.AddField("Selected", file_MultipleChoice_Selected, hslInteger);
    file_MultipleChoice.AddField("Editable", file_MultipleChoice_Editable, hslInteger);
    file_MultipleChoice.AddField("ToolTip", file_MultipleChoice_ToolTip, hslString, 255);
    if( 0 == file_MultipleChoice.Open(t_str_FullpathFile_RunData + " " + "MultipleChoiceDialog_Definition$", hslRead, l_str_SQLSentence) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file_MultipleChoice.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file_MultipleChoice.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_arr_DB_MultipleChoiceDialog_GroupNames.AddAsLast(file_MultipleChoice_GroupName);
        l_arr_DB_MultipleChoiceDialog_Labels.AddAsLast(file_MultipleChoice_Label);
        l_arr_DB_MultipleChoiceDialog_IsEditable.AddAsLast(file_MultipleChoice_Editable);
        l_arr_DB_MultipleChoiceDialog_IsSelected.AddAsLast(file_MultipleChoice_Selected);
        l_arr_DB_MultipleChoiceDialog_ToolTips.AddAsLast(Translate(""));
      }
    }
    if( 0 != file_MultipleChoice.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_MultipleChoice.RemoveFields();
    l_int_rtnErrorDialog = VectorCustomDialogs::RadioButtonDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 300, Translate("Settings"), Translate("Press OK to Continue, Cancel to abort"), l_arr_DB_MultipleChoiceDialog_Labels, l_arr_DB_MultipleChoiceDialog_ToolTips, l_arr_DB_MultipleChoiceDialog_IsEditable, l_arr_DB_MultipleChoiceDialog_IsSelected, l_arr_DB_MultipleChoiceDialog_GroupNames, VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
    l_int_NumberOfChoices=l_arr_DB_MultipleChoiceDialog_IsSelected.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfChoices;)
      {
        loopCounter2 = loopCounter2 + 1;
        if (l_arr_DB_MultipleChoiceDialog_IsSelected.ElementAt( loopCounter2 -1) == 1)
        {
          l_str_CurrentLabel=l_arr_DB_MultipleChoiceDialog_Labels.GetAt(loopCounter2-1);
          l_str_CurrentGroupName=l_arr_DB_MultipleChoiceDialog_GroupNames.GetAt(loopCounter2-1);
          l_str_SQLSentence = StrConcat12("UPDATE [MultipleChoiceDialog_Definition$] SET [Selected] = 1 WHERE [DialogID] = ",i_int_DialogID," AND [GroupName] = '",l_str_CurrentGroupName,"' AND [Label] = '",l_str_CurrentLabel,"'","","","","","");
          Trace(l_str_SQLSentence);
          file_MultipleChoice.AddField("DialogID", file_MultipleChoice_DialogID, hslInteger);
          file_MultipleChoice.AddField("GroupName", file_MultipleChoice_GroupName, hslString, 255);
          file_MultipleChoice.AddField("Label", file_MultipleChoice_Label, hslString, 255);
          file_MultipleChoice.AddField("Selected", file_MultipleChoice_Selected, hslInteger);
          file_MultipleChoice.AddField("Editable", file_MultipleChoice_Editable, hslInteger);
          file_MultipleChoice.AddField("ToolTip", file_MultipleChoice_ToolTip, hslString, 255);
          if( 0 == file_MultipleChoice.Open(t_str_FullpathFile_RunData + " " + "MultipleChoiceDialog_Definition$", hslRead, l_str_SQLSentence) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
          }
          if( 0 != file_MultipleChoice.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          file_MultipleChoice.RemoveFields();
        }
      }
    }
    Util2::Debug::TraceArray(Translate("----------- Selection: Settings Dialog: l_arr_DB_MultipleChoiceDialog_IsSelected: "), l_arr_DB_MultipleChoiceDialog_IsSelected);
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  function MultipleChoiceDialog_RetrieveUserSelection( variable i_int_DialogID, variable i_str_GroupName, variable & o_int_OptionSelected ) void {
    private variable l_str_FunctionName;
    private variable l_str_SQLSentence;
    private variable loopCounter2;
    o_int_OptionSelected = 0;
    l_str_FunctionName = Translate("");
    l_str_FunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    l_str_SQLSentence = StrConcat12("SELECT * FROM [MultipleChoiceDialog_Definition$] WHERE [DialogID] = ",i_int_DialogID," AND [GroupName] = '",i_str_GroupName,"","","'","","","","","");
    Trace(l_str_SQLSentence);
    file_MultipleChoice.AddField("DialogID", file_MultipleChoice_DialogID, hslInteger);
    file_MultipleChoice.AddField("GroupName", file_MultipleChoice_GroupName, hslString, 255);
    file_MultipleChoice.AddField("Label", file_MultipleChoice_Label, hslString, 255);
    file_MultipleChoice.AddField("Selected", file_MultipleChoice_Selected, hslInteger);
    file_MultipleChoice.AddField("Editable", file_MultipleChoice_Editable, hslInteger);
    file_MultipleChoice.AddField("ToolTip", file_MultipleChoice_ToolTip, hslString, 255);
    if( 0 == file_MultipleChoice.Open(t_str_FullpathFile_RunData + " " + "MultipleChoiceDialog_Definition$", hslRead, l_str_SQLSentence) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
    }
    {
      loopCounter2 = 0;
      while (
         (file_MultipleChoice.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == file_MultipleChoice.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (file_MultipleChoice_Selected == 1)
        {
          o_int_OptionSelected = loopCounter2;
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("o_int_OptionSelected: "), o_int_OptionSelected);
          break;
        }
      }
    }
    if( 0 != file_MultipleChoice.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_MultipleChoice.RemoveFields();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  function Retrieve_50mlTrough_ReagentsVolumesAndSequences( variable & o_arr_ReagentNames[], variable & o_arr_ReagentTotalVolumes[], sequence & o_arr_ReagentSequences[] ) void {
    private variable t_int_NumberOfRGTSequences;
    private variable loopCounter1;
    private sequence l_seq_CurrentSeq;
    o_arr_ReagentNames.SetSize( 0);
    o_arr_ReagentTotalVolumes.SetSize( 0);
    o_arr_ReagentSequences.SetSize( 0);
    o_arr_ReagentTotalVolumes=t_arr_flt_RGT_TotalVolume;
    o_arr_ReagentNames=t_arr_str_RGT_ReagentName;
    o_arr_ReagentSequences=t_arr_seq_RGT_SequencesToAspirate;
    Util2::Debug::TraceArray(Translate("t_arr_flt_RGT_TotalVolume: "), t_arr_flt_RGT_TotalVolume);
    Util2::Debug::TraceArray(Translate("t_arr_str_RGT_ReagentName: "), t_arr_str_RGT_ReagentName);
    t_int_NumberOfRGTSequences=t_arr_seq_RGT_SequencesToAspirate.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < t_int_NumberOfRGTSequences;)
      {
        loopCounter1 = loopCounter1 + 1;
        TrcTrace(Translate("Sequence at index: "), loopCounter1);
        l_seq_CurrentSeq=t_arr_seq_RGT_SequencesToAspirate.GetAt(loopCounter1-1);
        TrcTraceSequence(l_seq_CurrentSeq);
      }
    }
  }

  function Read_InputWorklist_ExcelOrCSVFormat( variable i_strSamplePlateFile, sequence i_seqSourceALPTemplate, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & o_arrIndex1SeqPositions[], variable & o_arrIndex1IDs[], variable & o_arrIndex2SeqPositions[], variable & o_arrIndex2IDs[], variable & o_arrALPseqLabID[], variable & o_arrALPseqPositions[], variable & o_strIndexLabwareFormat ) void {
    private variable l_fileInputWkl_Sample_ID;
    private variable l_intReturnFromArray;
    private variable l_intSizeArrIndex1Positions;
    private variable l_intCountRows;
    private variable l_intSizeArrIndex2Positions;
    private variable l_fileInputWkl_Index2_ID;
    private variable l_fileInputWkl_Index1_Pos;
    private variable l_fileInputWkl_Index2_Pos;
    private variable l_fileInputWkl_Index1_ID;
    private variable l_fileInputWkl_Sample_Position;
    private variable l_strCoordinate;
    private variable l_blnPositionFound;
    private variable l_intCountColumns;
    private variable l_strFileTypeExtension;
    private variable l_strTempLabIDSrcSeq;
    private variable l_strDisplayTextToStatusWindow;
    private variable l_intCountWorkListLines;
    private file l_hdlFileInputWorkList;
    private variable io_arrSampleSeqPositions[];
    private variable l_arr_strCoordinateLetter[];
    private variable l_arr_strCoordinates[];
    private variable io_arrSampleID[];
    private variable io_arrIndex1ID[];
    private variable io_arrIndex2ID[];
    private variable l_intCountWorkListLinesTrace;
    private variable l_intReturnDisplayDialog;
    o_intNumberOfSamples = 0;
    o_intIndexesUsedSetting = 0;
    o_strIndexLabwareFormat = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_ReadInputWorklistExcelFormat <<<<<<<<<<"));
    _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
    i_seqSourceALPTemplate.SetCurrentPosition(1);
    l_strTempLabIDSrcSeq = SeqGetLabwareId(i_seqSourceALPTemplate);
    io_arrSampleID.SetSize(0);
    io_arrSampleSeqPositions.SetSize(0);
    io_arrIndex1ID.SetSize(0);
    o_arrIndex1SeqPositions.SetSize(0);
    io_arrIndex2ID.SetSize(0);
    o_arrIndex2SeqPositions.SetSize(0);
    o_arrALPseqLabID.SetSize(0);
    l_strFileTypeExtension = HSLExtensions::File::GetFileExtension(i_strSamplePlateFile);
    l_strDisplayTextToStatusWindow = StrConcat2(Translate("Read input worklist : "), i_strSamplePlateFile);
    l_intReturnDisplayDialog = VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
    if (l_strFileTypeExtension == "csv")
    {
      onerror goto errLabel_2 ;
      err.Clear();
      l_hdlFileInputWorkList.AddField("Sample_ID", l_fileInputWkl_Sample_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Sample_Position", l_fileInputWkl_Sample_Position, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index1_ID", l_fileInputWkl_Index1_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index1_Pos", l_fileInputWkl_Index1_Pos, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index2_ID", l_fileInputWkl_Index2_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index2_Pos", l_fileInputWkl_Index2_Pos, hslString, 255);
      l_hdlFileInputWorkList.SetDelimiter(";");
      if( 0 == l_hdlFileInputWorkList.Open(i_strSamplePlateFile, hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strSamplePlateFile, "HxMetEdCompCmd");
      }
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        Display_Error_Dialog(Translate("Protocol cannot open Input Worklist (CSV format). Please review file structure and content. System will abort"));
      }   /* end if from skip handler if no error */
    }
    if (l_strFileTypeExtension == "xls")
    {
      onerror goto errLabel_3 ;
      err.Clear();
      l_hdlFileInputWorkList.AddField("Sample_ID", l_fileInputWkl_Sample_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Sample_Position", l_fileInputWkl_Sample_Position, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index1_ID", l_fileInputWkl_Index1_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index1_Pos", l_fileInputWkl_Index1_Pos, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index2_ID", l_fileInputWkl_Index2_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index2_Pos", l_fileInputWkl_Index2_Pos, hslString, 255);
      if( 0 == l_hdlFileInputWorkList.Open(i_strSamplePlateFile + " " + "Sheet1$", hslRead, "Select * from [Sheet1$] where [Sample_Position] is not null") )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strSamplePlateFile, "HxMetEdCompCmd");
      }
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        Display_Error_Dialog(Translate("Protocol cannot open Input Worklist (XLS format). Please review file structure and content. System will abort"));
      }   /* end if from skip handler if no error */
    }
    if (l_strFileTypeExtension != "xls")
    {
      if (l_strFileTypeExtension != "csv")
      {
        Display_Error_Dialog(Translate("Protocol cannot open Input Worklist (Not supported format). Please review file structure and content. System will abort"));
      }
    }
    {
      l_intCountWorkListLines = 0;
      while (
         (l_hdlFileInputWorkList.Eof() == 0)
      )
      {
        l_intCountWorkListLines = l_intCountWorkListLines + 1;
        l_intCountWorkListLinesTrace = l_intCountWorkListLines;
        if( 0 == l_hdlFileInputWorkList.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (l_fileInputWkl_Sample_Position != "")
        {
          io_arrSampleID.AddAsLast(l_fileInputWkl_Sample_ID);
          o_arrALPseqLabID.AddAsLast(l_strTempLabIDSrcSeq);
          o_arrALPseqPositions.AddAsLast(l_fileInputWkl_Sample_Position);
          o_arrIndex1IDs.AddAsLast(l_fileInputWkl_Index1_ID);
          o_arrIndex1SeqPositions.AddAsLast(l_fileInputWkl_Index1_Pos);
          o_arrIndex2IDs.AddAsLast(l_fileInputWkl_Index2_ID);
          o_arrIndex2SeqPositions.AddAsLast(l_fileInputWkl_Index2_Pos);
        }
      }
    }
    APPSLIB::TraceValues(Translate("Records in Excel File: "), l_intCountWorkListLinesTrace, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Util2::Debug::TraceArray_3(Translate(" Arrays of Positions for Samples and Indexes"), o_arrALPseqPositions, o_arrIndex1SeqPositions, o_arrIndex2SeqPositions);
    Util2::Debug::TraceArray_3(Translate(" Arrays of ID for Samples and Indexes"), io_arrSampleID, o_arrIndex1IDs, o_arrIndex2IDs);
    l_arr_strCoordinateLetter.SetSize(0);
    l_arr_strCoordinateLetter.AddAsLast(Translate("A"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("B"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("C"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("D"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("E"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("F"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("G"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("H"));
    l_arr_strCoordinates.SetSize(0);
    {
      for(l_intCountColumns = 0; l_intCountColumns < 12;)
      {
        l_intCountColumns = l_intCountColumns + 1;
        {
          for(l_intCountRows = 0; l_intCountRows < 8;)
          {
            l_intCountRows = l_intCountRows + 1;
            l_strCoordinate = StrConcat2(l_arr_strCoordinateLetter.ElementAt( l_intCountRows -1), l_intCountColumns);
            l_arr_strCoordinates.AddAsLast(l_strCoordinate);
          }
        }
      }
    }
    l_blnPositionFound = APPSLIB::ArrayLookup(l_arr_strCoordinates, o_arrIndex1SeqPositions.ElementAt( 1 -1), l_intReturnFromArray);
    if (l_blnPositionFound == ASWGLOBAL::BOOL::TRUE)
    {
      o_strIndexLabwareFormat = Translate("plate");
    }
    else
    {
      o_strIndexLabwareFormat = Translate("tube");
    }
    o_intNumberOfSamples=io_arrSampleID.GetSize();
    l_intSizeArrIndex1Positions=o_arrIndex1SeqPositions.GetSize();
    l_intSizeArrIndex2Positions=o_arrIndex2SeqPositions.GetSize();
    if (l_intSizeArrIndex2Positions != 0)
    {
      o_intIndexesUsedSetting = 2;
    }
    else
    {
      if (l_intSizeArrIndex1Positions == 0)
      {
        o_intIndexesUsedSetting = 0;
      }
      else
      {
        o_intIndexesUsedSetting = 1;
      }
    }
    if( 0 != l_hdlFileInputWorkList.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlFileInputWorkList.RemoveFields();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: DATA_ReadSamplePlateFile <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _PrintToFile( variable & i_arr_strCol1[], variable & i_arr_strCol2[], variable & i_arr_strCol3[] ) void {
    private variable l_intNumberOfRecords;
    private variable loopCounter1;
    private variable file1_Reagent_Name;
    private variable file1_Volume_Required;
    private variable file1_Description;
    private file file1;
    private variable l_strMasterMixSummary;
    l_intNumberOfRecords=i_arr_strCol1.GetSize();
    l_strMasterMixSummary = StrConcat4(Translate("C:\\Program Files (x86)\\HAMILTON\\Logfiles\\"), Translate("MastermixSummary"), Translate(".csv"), Translate(""));
    file1.AddField("Reagent Name", file1_Reagent_Name, hslString, 255);
    file1.AddField("Volume Required", file1_Volume_Required, hslString, 255);
    file1.AddField("Description", file1_Description, hslString, 255);
    file1.SetDelimiter(";");
    if( 0 == file1.Open(l_strMasterMixSummary, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, l_strMasterMixSummary, "HxMetEdCompCmd");
    }
    {
      for(loopCounter1 = 0; loopCounter1 < l_intNumberOfRecords;)
      {
        loopCounter1 = loopCounter1 + 1;
        file1_Reagent_Name=i_arr_strCol1.GetAt(loopCounter1-1);
        file1_Volume_Required=i_arr_strCol2.GetAt(loopCounter1-1);
        file1_Description=i_arr_strCol3.GetAt(loopCounter1-1);
        if( 0 == file1.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
  }

  private function _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport( variable i_strStepReturnValueLoadingStep ) void {
    private variable l_strCurrentLabIDTarget;
    private variable l_intNumberOfPositions;
    private variable l_strTranslatedPipettingInformationDispense;
    private variable l_strTranslatedPipettingInformationAspiration;
    private variable l_strCurrentPosIDTarget;
    private variable l_strEmptyString;
    private variable l_intGetErrorRecovery;
    private variable l_strCurrentTime;
    private variable l_strCurrentDate;
    private variable l_strCurrentLabIDSource;
    private variable l_intIndexNumberOfPositions;
    private variable l_intGetSlaveErrorCode;
    private variable l_strTranslatedLoadingInformation;
    private variable l_intGetPositionFromNum;
    private variable l_strGetStepData;
    private variable l_intGetMainErrorCode;
    private variable l_strCurrentPosIDSource;
    private file l_hdlNGSStarReportFile2;
    private variable l_bln_ErrorOpeningFile;
    private variable l_str_FunctionName;
    private variable loopCounter1;
    private timer l_timer_RecoverError;
    l_str_FunctionName = Translate("");
    l_str_FunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    l_strCurrentDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    l_strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    l_intNumberOfPositions = StepReturn::GetNumberOfPositions(i_strStepReturnValueLoadingStep);
    l_strEmptyString = Translate("");
    l_bln_ErrorOpeningFile = ASWGLOBAL::BOOL::TRUE;
    {
      loopCounter1 = 0;
      while (l_bln_ErrorOpeningFile == ASWGLOBAL::BOOL::TRUE)
      {
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_4 ;
        err.Clear();
        l_hdlNGSStarReportFile2.AddField("Date", l_strCurrentDate, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("Time", l_strCurrentTime, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("LabID Source", l_strCurrentLabIDSource, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("PosID Source", l_strCurrentPosIDSource, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("Transfer Volume", l_strEmptyString, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("LabID Target", l_strCurrentLabIDTarget, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("PosID Target", l_strCurrentPosIDTarget, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("Barcode", l_strGetStepData, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("Transport information", l_strTranslatedLoadingInformation, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("Aspiration information", l_strTranslatedPipettingInformationAspiration, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("Dispense information", l_strTranslatedPipettingInformationDispense, hslString, 255);
        if( 0 == l_hdlNGSStarReportFile2.Open(t_str_FullPathReportFile + " " + "RuntimeReport$", hslAppend) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullPathReportFile, "HxMetEdCompCmd");
        }
        l_bln_ErrorOpeningFile = ASWGLOBAL::BOOL::FALSE;
        errLabel_4 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          l_bln_ErrorOpeningFile = ASWGLOBAL::BOOL::TRUE;
          if( 0 == l_timer_RecoverError.SetTimer(2) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_timer_RecoverError.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if (loopCounter1 == 3)
          {
            Display_Error_Dialog(Translate("There is a problem opening Report File. System has to abort"));
          }
        }   /* end if from skip handler if no error */
      }
    }
    {
      for(l_intIndexNumberOfPositions = 0; l_intIndexNumberOfPositions < l_intNumberOfPositions;)
      {
        l_intIndexNumberOfPositions = l_intIndexNumberOfPositions + 1;
        l_intGetPositionFromNum = StepReturn::GetPositionFromNum(l_intIndexNumberOfPositions, i_strStepReturnValueLoadingStep);
        l_strCurrentLabIDSource = StepReturn::GetLabwareId(l_intGetPositionFromNum, i_strStepReturnValueLoadingStep);
        l_strCurrentPosIDSource = StepReturn::GetPositionId(l_intGetPositionFromNum, i_strStepReturnValueLoadingStep);
        l_strGetStepData = StepReturn::GetStepData(l_intIndexNumberOfPositions, i_strStepReturnValueLoadingStep);
        if (l_strGetStepData != "")
        {
          l_intGetMainErrorCode = StepReturn::GetMainError(l_intIndexNumberOfPositions, i_strStepReturnValueLoadingStep);
          l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intIndexNumberOfPositions, i_strStepReturnValueLoadingStep);
          l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intIndexNumberOfPositions, i_strStepReturnValueLoadingStep);
          _DATA_TranslateAutoLoadErrorCodes(l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedLoadingInformation);
          if( 0 == l_hdlNGSStarReportFile2.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
    }
    if( 0 != l_hdlNGSStarReportFile2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlNGSStarReportFile2.RemoveFields();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  private function _DATA_TranslateAutoLoadErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedAutoLoadInformaton ) void {
    private variable l_strMainError;
    private variable l_intErrorValue;
    private variable l_strErrorRecovery;
    private variable l_strSlaveError;
    o_strTranslatedAutoLoadInformaton = 0;
    Trace ("Main error : ", i_intMainError, " +++ Slave error : ", i_intSlaveError, " +++ Recovery button : ", i_intErrorRecovery);
    l_intErrorValue = 0;
    l_strMainError = Translate("unknown error");
    l_strSlaveError = Translate("unknown error");
    l_strErrorRecovery = Translate("unknown error");
    if (i_intMainError == 0)
    {
      l_strMainError = Translate("No main error.");
    }
    if (i_intMainError == 1)
    {
      l_strMainError = Translate("Syntax error.");
    }
    if (i_intMainError == 2)
    {
      l_strMainError = Translate("Hardware error. Drive blocked, low power etc.");
    }
    if (i_intMainError == 3)
    {
      l_strMainError = Translate("Not Executed Error. There was an error in previous part command.");
    }
    if (i_intMainError == 4)
    {
      l_strMainError = Translate("Clot Error. Tip blocked.");
    }
    if (i_intMainError == 5)
    {
      l_strMainError = Translate("Barcode unreadable. Bad or missing barcode.");
    }
    if (i_intMainError == 6)
    {
      l_strMainError = Translate("Insufficient Liquid Error. Not enough liquid available.");
    }
    if (i_intMainError == 7)
    {
      l_strMainError = Translate("Tip already fitted. Repeated attempts to fit a tip or iSwap movement with tips.");
    }
    if (i_intMainError == 8)
    {
      l_strMainError = Translate("No Tip. Command was started without fitting tip. Tip was not fitted or fell off again.");
    }
    if (i_intMainError == 9)
    {
      l_strMainError = Translate("No Carrier. Load command without carrier performed.");
    }
    if (i_intMainError == 10)
    {
      l_strMainError = Translate("Not completed. Command in command buffer was aborted due to an error in a previous command, or command stack was deleted.");
    }
    if (i_intMainError == 11)
    {
      l_strMainError = Translate("Pressure LLD Error. A dispense with pressure liquid level detection is not allowed.");
    }
    if (i_intMainError == 12)
    {
      l_strMainError = Translate("No teach signal. X-Movement to LLD reached maximum allowable position without detecting teach signal.");
    }
    if (i_intMainError == 13)
    {
      l_strMainError = Translate("Loading tray error. Position already occupied.");
    }
    if (i_intMainError == 14)
    {
      l_strMainError = Translate("Pressure LLD Error. Pressure liquid level detection in a consecutive aspiration is not allowed.");
    }
    if (i_intMainError == 15)
    {
      l_strMainError = Translate("Not allowed parameter combination. I.e. pLLD and dispense or wrong X-drive assignment.");
    }
    if (i_intMainError == 16)
    {
      l_strMainError = Translate("Cover close error. Cover is not closed and couldn't be locked.");
    }
    if (i_intMainError == 17)
    {
      l_strMainError = Translate("Improper Aspiration or Dispense Error. The pressure-based aspiration / dispensation control reported an error ( not enough liquid ).");
    }
    if (i_intMainError == 18)
    {
      l_strMainError = Translate("Wash fluid or waste error. Missing wash fluid OR waste of particular washer is full.");
    }
    if (i_intMainError == 19)
    {
      l_strMainError = Translate("Incubation error. Incubator temperature out of limit.");
    }
    if (i_intMainError == 20)
    {
      l_strMainError = Translate("TADM overshot. Overshot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 21)
    {
      l_strMainError = Translate("No element. Expected element not detected.");
    }
    if (i_intMainError == 22)
    {
      l_strMainError = Translate("Element still holding. Get command is sent twice or element is not discarded.");
    }
    if (i_intMainError == 23)
    {
      l_strMainError = Translate("Element lost. Expected element is missing or lost.");
    }
    if (i_intMainError == 24)
    {
      l_strMainError = Translate("Illegal target plate position. Over or underflow of iSWAP positions OR iSWAP is not in park position during pipetting activities.");
    }
    if (i_intMainError == 25)
    {
      l_strMainError = Translate("Illegal user access. Carrier was manually removed or cover is open (immediate stop is executed).");
    }
    if (i_intMainError == 26)
    {
      l_strMainError = Translate("TADM undershot. Undershot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 27)
    {
      l_strMainError = Translate("Position Error. The position is out of range.");
    }
    if (i_intMainError == 28)
    {
      l_strMainError = Translate("Unexpected cLLD Error. The cLLD detected a liquid level above start height of liquid level search.");
    }
    if (i_intMainError == 29)
    {
      l_strMainError = Translate("Area already occupied. Its impossible to occupy area because this area is already in use.");
    }
    if (i_intMainError == 30)
    {
      l_strMainError = Translate("Impossible to occupy area. Area can't be occupied because is no solution for arm prepositioning.");
    }
    if (i_intMainError == 31)
    {
      l_strMainError = Translate("Anti drop control error. Anti drop controlling out of tolerance.");
    }
    if (i_intMainError == 32)
    {
      l_strMainError = Translate("Parameter out of range.");
    }
    if (i_intMainError == 33)
    {
      l_strMainError = Translate("Parameter does not belong to command, or not all parameters were sent.");
    }
    if (i_intMainError == 34)
    {
      l_strMainError = Translate("Node name unknown.");
    }
    if (i_intMainError == 35)
    {
      l_strMainError = Translate("ID parameter error.");
    }
    if (i_intMainError == 37)
    {
      l_strMainError = Translate("Node name defined twice.");
    }
    if (i_intMainError == 38)
    {
      l_strMainError = Translate("Faulty XL channel settings.");
    }
    if (i_intMainError == 39)
    {
      l_strMainError = Translate("Faulty robotic channel settings.");
    }
    if (i_intMainError == 40)
    {
      l_strMainError = Translate("PIP task busy.");
    }
    if (i_intMainError == 41)
    {
      l_strMainError = Translate("Auto load task busy.");
    }
    if (i_intMainError == 42)
    {
      l_strMainError = Translate("Miscellaneous task busy.");
    }
    if (i_intMainError == 43)
    {
      l_strMainError = Translate("Incubator task busy.");
    }
    if (i_intMainError == 44)
    {
      l_strMainError = Translate("Washer task busy.");
    }
    if (i_intMainError == 45)
    {
      l_strMainError = Translate("iSWAP task busy.");
    }
    if (i_intMainError == 46)
    {
      l_strMainError = Translate("CoRe 96 head task busy.");
    }
    if (i_intMainError == 47)
    {
      l_strMainError = Translate("Carrier sensor doesn't work properly.");
    }
    if (i_intMainError == 48)
    {
      l_strMainError = Translate("CoRe 384 head task busy.");
    }
    if (i_intMainError == 49)
    {
      l_strMainError = Translate("Nano pipettor task busy.");
    }
    if (i_intMainError == 50)
    {
      l_strMainError = Translate("XL channel task busy.");
    }
    if (i_intMainError == 51)
    {
      l_strMainError = Translate("Tube gripper task busy.");
    }
    if (i_intMainError == 52)
    {
      l_strMainError = Translate("Imaging channel task busy.");
    }
    if (i_intMainError == 53)
    {
      l_strMainError = Translate("Robotic channel task busy.");
    }
    if (i_intMainError == 99)
    {
      l_strMainError = Translate("Slave Error. This error code indicates an error in one of the slaves.");
    }
    if (i_intMainError == 102)
    {
      l_strMainError = Translate("Liquid Level Error. Liquid surface not detected.");
    }
    if (i_intMainError == 104)
    {
      l_strMainError = Translate("Not Aspirated Error. Dispense volume exceeds the aspirated volume.");
    }
    if (i_intMainError == 105)
    {
      l_strMainError = Translate("Improper Dispensation Error. The dispensed volume is out of tolerance (may only occur for Nano Pipettor Dispense steps).");
    }
    if (i_intSlaveError == 0)
    {
      l_strSlaveError = Translate("No slave error.");
    }
    if (i_intSlaveError == 20)
    {
      l_strSlaveError = Translate("No I²C Bus or EEPROM not working. Transfer check error. No communication to EEPROM.");
    }
    if (i_intSlaveError == 30)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined command.");
    }
    if (i_intSlaveError == 31)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined parameter.");
    }
    if (i_intSlaveError == 32)
    {
      l_strSlaveError = Translate("Syntax check error. Parameter out of range.");
    }
    if (i_intSlaveError == 35)
    {
      l_strSlaveError = Translate("General error during execution of commands. Voltages outside permitted range.");
    }
    if (i_intSlaveError == 36)
    {
      l_strSlaveError = Translate("General error during execution of commands. Stop during execution of a command.");
    }
    if (i_intSlaveError == 40)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process.");
    }
    if (i_intSlaveError == 50)
    {
      l_strSlaveError = Translate("Scanner X drive - Init position not found.");
    }
    if (i_intSlaveError == 51)
    {
      l_strSlaveError = Translate("Scanner X drive - Stepper motor not initialized. Command sent before motor initialized.");
    }
    if (i_intSlaveError == 52)
    {
      l_strSlaveError = Translate("Scanner X drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 55)
    {
      l_strSlaveError = Translate("Scanner rotation drive - drive blocked.");
    }
    if (i_intSlaveError == 60)
    {
      l_strSlaveError = Translate("Carrier Y drive - Init position not found. Hardware not working.");
    }
    if (i_intSlaveError == 61)
    {
      l_strSlaveError = Translate("Carrier Y drive - drive not initialized.");
    }
    if (i_intSlaveError == 62)
    {
      l_strSlaveError = Translate("Carrier Y drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 65)
    {
      l_strSlaveError = Translate("Carrier Z drive - Init position not found. Hardware not working.");
    }
    if (i_intSlaveError == 66)
    {
      l_strSlaveError = Translate("Carrier Z drive - drive not initialized.");
    }
    if (i_intSlaveError == 67)
    {
      l_strSlaveError = Translate("Carrier Z drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 70)
    {
      l_strSlaveError = Translate("Barcode scanner - Communication error. Hardware not working, scanner dysfunction.");
    }
    if (i_intSlaveError == 75)
    {
      l_strSlaveError = Translate("Loading indicator LED - Communication error to loading indicator. Communication to LEDs not working.");
    }
    if (i_intSlaveError == 80)
    {
      l_strSlaveError = Translate("Carrier handling - Identification barcode not readable. Missing or unreadable identification barcode or wrong barcode type definition.");
    }
    if (i_intSlaveError == 81)
    {
      l_strSlaveError = Translate("Carrier handling - No carrier present. Carrier missing or sensor not working.");
    }
    if (i_intSlaveError == 82)
    {
      l_strSlaveError = Translate("Carrier handling - No carrier loaded. Load or unload command without identification of carrier.");
    }
    if (i_intSlaveError == 83)
    {
      l_strSlaveError = Translate("Carrier handling - Loading tray is occupied. At unloading carrier detected on loading tray.");
    }
    if (i_intSlaveError == 84)
    {
      l_strSlaveError = Translate("Carrier handling - Data for free definable carrier not correct. Indices not in ascending order OR positions not in ascending order OR gab between barcode reading area to low.");
    }
    if (i_intErrorRecovery == 0)
    {
      l_strErrorRecovery = Translate("No recovery.");
    }
    if (i_intErrorRecovery == 1)
    {
      l_strErrorRecovery = Translate("Abort - Run aborted.");
    }
    if (i_intErrorRecovery == 2)
    {
      l_strErrorRecovery = Translate("Cancel - run canceled or user defined errorhandling  was executed.");
    }
    if (i_intErrorRecovery == 3)
    {
      l_strErrorRecovery = Translate("Initialize. Instrument initialized again.");
    }
    if (i_intErrorRecovery == 4)
    {
      l_strErrorRecovery = Translate("Repeat. Command repeated.");
    }
    if (i_intErrorRecovery == 5)
    {
      l_strErrorRecovery = Translate("Exclude. Channel or position excluded until next tip pick up.");
    }
    if (i_intErrorRecovery == 6)
    {
      l_strErrorRecovery = Translate("Waste. Tip ejected to the default waste.");
    }
    if (i_intErrorRecovery == 7)
    {
      l_strErrorRecovery = Translate("Air. Rest of missing volume filled up with air.");
    }
    if (i_intErrorRecovery == 8)
    {
      l_strErrorRecovery = Translate("Bottom. Aspiration repeated on container bottom.");
    }
    if (i_intErrorRecovery == 9)
    {
      l_strErrorRecovery = Translate("Continue. Run continued without any change.");
    }
    if (i_intErrorRecovery == 10)
    {
      l_strErrorRecovery = Translate("Barcode. Barcode assigned manually.");
    }
    if (i_intErrorRecovery == 11)
    {
      l_strErrorRecovery = Translate("Next. Command repeated on next sequence position.");
    }
    if (i_intErrorRecovery == 12)
    {
      l_strErrorRecovery = Translate("Available. Available volume used.");
    }
    if (l_strMainError == "unknown error")
    {
      l_strMainError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strSlaveError == "unknown error")
    {
      l_strSlaveError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strErrorRecovery == "unknown error")
    {
      l_strErrorRecovery = Translate(" error not translated by library - check log file to retrieve data");
    }
    l_strMainError = StrConcat4(l_strMainError, Translate(" - code : "), i_intMainError, Translate(""));
    l_strSlaveError = StrConcat4(l_strSlaveError, Translate(" - code : "), i_intSlaveError, Translate(""));
    l_strErrorRecovery = StrConcat4(l_strErrorRecovery, Translate(" - code : "), i_intErrorRecovery, Translate(""));
    l_intErrorValue = l_intErrorValue + i_intMainError;
    l_intErrorValue = l_intErrorValue + i_intSlaveError;
    l_intErrorValue = l_intErrorValue + i_intErrorRecovery;
    if (l_intErrorValue == 0)
    {
      o_strTranslatedAutoLoadInformaton = Translate("loading step ok.");
    }
    else
    {
      o_strTranslatedAutoLoadInformaton = StrConcat8(l_strMainError, Translate(" ; "), l_strSlaveError, Translate(" ; "), l_strErrorRecovery, Translate(""), Translate(""), Translate(""));
    }
  }

  function MultipleChoiceDialog_DefineChoiceElement( variable i_int_DialogId, variable i_str_GroupName, variable i_str_Label ) void {
    file_MultipleChoice.AddField("DialogID", file_MultipleChoice_DialogID, hslInteger);
    file_MultipleChoice.AddField("GroupName", file_MultipleChoice_GroupName, hslString, 255);
    file_MultipleChoice.AddField("Label", file_MultipleChoice_Label, hslString, 255);
    file_MultipleChoice.AddField("Selected", file_MultipleChoice_Selected, hslInteger);
    file_MultipleChoice.AddField("Editable", file_MultipleChoice_Editable, hslInteger);
    file_MultipleChoice.AddField("ToolTip", file_MultipleChoice_ToolTip, hslString, 255);
    if( 0 == file_MultipleChoice.Open(t_str_FullpathFile_RunData + " " + "MultipleChoiceDialog_Definition$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
    }
    file_MultipleChoice_DialogID = i_int_DialogId;
    file_MultipleChoice_GroupName = i_str_GroupName;
    file_MultipleChoice_Label = i_str_Label;
    file_MultipleChoice_Selected = 0;
    file_MultipleChoice_Editable = 1;
    file_MultipleChoice_ToolTip = Translate("");
    if( 0 == file_MultipleChoice.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != file_MultipleChoice.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_MultipleChoice.RemoveFields();
  }

  function Display_Message_Dialog( variable i_str_Message ) void {
    private variable l_int_rtnErrorDialog;
    _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
    l_int_rtnErrorDialog = VectorCustomDialogs::ErrorDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, i_str_Message, Translate("Press OK to proceed the run"));
    _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
  }

  function _CheckBindReturnValueVectorCustomDialogs( variable i_intBindReturnValue ) void {
    private variable l_strErrorMessage;
    private variable l_intBindReturnValue;
    private variable l_blnSkipDialog;
    if (i_intBindReturnValue == ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      Trace("Bind return value of current Vector custom dialog : ", i_intBindReturnValue);
      if (i_intBindReturnValue == ASWGLOBAL::BOOL::FALSE)
      {
        l_blnSkipDialog = ASWGLOBAL::BOOL::TRUE;
        l_strErrorMessage = Translate("Command did not end successfully ");
      }
      else
      {
        l_blnSkipDialog = ASWGLOBAL::BOOL::FALSE;
      }
      if (i_intBindReturnValue == -1)
      {
        l_strErrorMessage = Translate("Sizes of initialization arrays are inhomogeneous. Hint : Check your arrays (sizes have to be equal). ");
      }
      if (i_intBindReturnValue == -2)
      {
        l_strErrorMessage = Translate("Data range / type. Hint : Used range or range in combination with data type is invalid.");
      }
      if (i_intBindReturnValue == -5)
      {
        l_strErrorMessage = Translate("IconSet Directory. Hint : Make sure that the directory named “ASWIconSet” exists inside the directory of ASWStandardDialogs library.");
      }
      if (i_intBindReturnValue == -8)
      {
        l_strErrorMessage = Translate("Dialog has been closed through timeout. Hint : This may or may not be an error, depending on the programmer’s intention. Clicking on a dialog interrupts timer and thus does not lead to a error.");
      }
      if (i_intBindReturnValue == -9)
      {
        l_strErrorMessage = Translate("The dialog was not . Hint : Do not use shortcuts to close the dialog, use buttons from the dialog.");
      }
      if (i_intBindReturnValue == -10)
      {
        l_strErrorMessage = Translate("Library is not initialized. Hint : Initialize library before any other function is called.");
      }
      if (i_intBindReturnValue == -11)
      {
        l_strErrorMessage = Translate("Bad Parameter. Hint : See trace for more information about which parameter caused the error. Adjust the input parameter accordingly.");
      }
      if (i_intBindReturnValue == -1000)
      {
        l_strErrorMessage = Translate("A COM error has occured. Hint : Please ensure that the com library HamiltonASWGUI.Dialogs.dll is registered.");
      }
      if (i_intBindReturnValue == -1001)
      {
        l_strErrorMessage = Translate("A COM error has occured. Hint : You cannot execute more dialogs at the same time than defined in the HSL library (default is dialog at a time).");
      }
      Trace("Error message od Vector custom dialog library : ", l_strErrorMessage);
      if (l_blnSkipDialog == ASWGLOBAL::BOOL::FALSE)
      {
        l_intBindReturnValue = VectorCustomDialogs::MessageDialog(Translate("Error message of Vector Custom Dialogs. OK is trying to continue the run ignoring the error - CANCEL will abort the run"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 60, l_strErrorMessage);
        if (l_intBindReturnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
        }
      }
    }
  }

  function Evaluate_ResourcesByCarrier(  ) void {
    private variable loopCounter3;
    private variable l_str_SQLSentence;
    private variable l_str_FunctionName;
    private variable l_int_lengthString;
    l_str_FunctionName = Translate("");
    l_str_FunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    l_str_SQLSentence = Translate("");
    t_arr_strCarrierName_Distinct.SetSize(0);
    l_str_SQLSentence = StrConcat12("SELECT DISTINCT [DB_CarrierName] FROM [RunData$]","","","","","","","","","","","");
    Trace(l_str_SQLSentence);
    //l_str_SQLSentence = StrConcat12("","","","","","","","","","","","");
    file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
    if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, l_str_SQLSentence) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
    }
    {
      loopCounter3 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter3 = loopCounter3 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_int_lengthString = StrGetLength(file_RunData_DB_CarrierName);
        if (l_int_lengthString != 0)
        {
          t_arr_strCarrierName_Distinct.AddAsLast(file_RunData_DB_CarrierName);
        }
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Array of Carriers To Load (t_arr_strCarrierName_Distinct): "), t_arr_strCarrierName_Distinct);
    _RunDATA_Find_Record(Translate("DB_LabwareType"), ARW_Global::LabwareType::TIP50, Translate(""), 1, g_int_TotalNumberOf50Tips);
    _RunDATA_Find_Record(Translate("DB_LabwareType"), ARW_Global::LabwareType::TIP300, Translate(""), 1, g_int_TotalNumberOf300Tips);
    _RunDATA_Find_Record(Translate("DB_LabwareType"), ARW_Global::LabwareType::TIP1000, Translate(""), 1, g_int_TotalNumberOf1000Tips);
    _RunDATA_Find_Record(Translate("DB_LabwareType"), ARW_Global::LabwareType::MIDI_Plate, ARW_Global::CarrierType::PLT_Stack, 1, g_int_TotalNumberOfMIDI);
    _RunDATA_Find_Record(Translate("DB_LabwareType"), ARW_Global::LabwareType::HSP_Plate, ARW_Global::CarrierType::PLT_Stack, 1, g_int_TotalNumberOfHSP);
    _RunDATA_Find_Record(Translate("DB_LabwareType"), ARW_Global::LabwareType::Comfortlid, ARW_Global::CarrierType::ODTC, 1, g_int_TotalNumberOfComfortLid);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("g_int_TotalNumberOf1000Tips: "), g_int_TotalNumberOf1000Tips);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("g_int_TotalNumberOf300Tips: "), g_int_TotalNumberOf300Tips);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("g_int_TotalNumberOf50Tips: "), g_int_TotalNumberOf50Tips);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("g_int_TotalNumberOfMIDI: "), g_int_TotalNumberOfMIDI);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("g_int_TotalNumberOfHSP: "), g_int_TotalNumberOfHSP);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("g_int_TotalNumberOfComfortLid: "), g_int_TotalNumberOfComfortLid);
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  private function _SortElements( variable & io_arrColumn1[], variable & io_arrColumn2[], variable & io_arrColumn3[], variable i_intSortByColumn ) void {
    private variable l_intSizeArray;
    private variable l_var_arr1;
    private variable l_var_arr2;
    private variable l_var_arr3;
    private variable loopCounter1;
    private variable l_arr_tempNotSorted[];
    private variable l_str_concat_var1_var2_var3;
    private variable l_bln_FunctionReturn;
    private variable l_str_Concatenation;
    private variable l_arr_tempSorted[];
    private variable l_arr_strTokens[];
    private variable l_int_ReturnSearch;
    private variable loopCounter2;
    private variable l_str_loopCounter2;
    private variable l_arr_strNumeric1to9[];
    private variable l_arr_TokensPositions[];
    private variable l_int_NumberOfPositionsDefinedAsSingleString;
    private variable l_str_NewPositionId;
    private variable loopCounter3;
    private variable l_str_NewPositionIDs_formatted;
    private variable l_int_Temp_LenghtStr;
    Util2::Debug::TraceArray_3(Translate("Before Sorting"), io_arrColumn1, io_arrColumn2, io_arrColumn3);
    l_arr_tempNotSorted.SetSize(0);
    l_intSizeArray=io_arrColumn1.GetSize();
    l_str_concat_var1_var2_var3 = Translate("");
    l_arr_strNumeric1to9.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < 9;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_str_loopCounter2 = StrIStr(loopCounter2);
        l_arr_strNumeric1to9.AddAsLast(l_str_loopCounter2);
      }
    }
    {
      for(loopCounter1 = 0; loopCounter1 < l_intSizeArray;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_var_arr1=io_arrColumn1.GetAt(loopCounter1-1);
        l_int_ReturnSearch = ARRAYTOOLS::Lookup(l_arr_strNumeric1to9, l_var_arr1);
        if (l_int_ReturnSearch != 0)
        {
          l_var_arr1 = StrConcat2(Translate("0"), l_var_arr1);
        }
        else
        {
          l_arr_TokensPositions.SetSize(0);
          STRTOKENIZE::StrTokenize(l_var_arr1, Translate(","), l_arr_TokensPositions, ASWGLOBAL::BOOL::FALSE);
          l_int_NumberOfPositionsDefinedAsSingleString=l_arr_TokensPositions.GetSize();
          l_str_NewPositionIDs_formatted = Translate("");
          {
            for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfPositionsDefinedAsSingleString;)
            {
              loopCounter3 = loopCounter3 + 1;
              l_str_NewPositionId = Translate("");
              l_int_Temp_LenghtStr = StrGetLength(l_arr_TokensPositions.ElementAt( loopCounter3 -1));
              if (l_int_Temp_LenghtStr == 1)
              {
                l_str_NewPositionId = StrConcat2(Translate("0"), l_arr_TokensPositions.ElementAt( loopCounter3 -1));
              }
              else
              {
                l_str_NewPositionId = l_arr_TokensPositions.ElementAt( loopCounter3 -1);
              }
              if (loopCounter3 != l_int_NumberOfPositionsDefinedAsSingleString)
              {
                l_str_NewPositionIDs_formatted = StrConcat12(l_str_NewPositionIDs_formatted, Translate(""), l_str_NewPositionId, Translate("\n"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              }
              else
              {
                l_str_NewPositionIDs_formatted = StrConcat12(l_str_NewPositionIDs_formatted, Translate(""), l_str_NewPositionId, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              }
            }
          }
          l_var_arr1 = l_str_NewPositionIDs_formatted;
        }
        l_var_arr2=io_arrColumn2.GetAt(loopCounter1-1);
        l_var_arr3=io_arrColumn3.GetAt(loopCounter1-1);
        if (i_intSortByColumn == 1)
        {
          l_str_concat_var1_var2_var3 = StrConcat12(l_var_arr1, Translate("$"), l_var_arr2, Translate("$"), l_var_arr3, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        if (i_intSortByColumn == 2)
        {
          l_str_concat_var1_var2_var3 = StrConcat12(l_var_arr2, Translate("$"), l_var_arr1, Translate("$"), l_var_arr3, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        if (i_intSortByColumn == 3)
        {
          l_str_concat_var1_var2_var3 = StrConcat12(l_var_arr3, Translate("$"), l_var_arr1, Translate("$"), l_var_arr2, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        l_arr_tempNotSorted.AddAsLast(l_str_concat_var1_var2_var3);
      }
    }
    l_arr_tempSorted = HSLExtensions::Array::Sort(l_arr_tempNotSorted, 1, l_bln_FunctionReturn);
    io_arrColumn1.SetSize(0);
    io_arrColumn2.SetSize(0);
    io_arrColumn3.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < l_intSizeArray;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_arr_strTokens.SetSize(0);
        l_str_Concatenation=l_arr_tempSorted.GetAt(loopCounter1-1);
        STRTOKENIZE::StrTokenize(l_str_Concatenation, Translate("$"), l_arr_strTokens, ASWGLOBAL::BOOL::FALSE);
        if (i_intSortByColumn == 1)
        {
          io_arrColumn1.AddAsLast(l_arr_strTokens.ElementAt( 1 -1));
          io_arrColumn2.AddAsLast(l_arr_strTokens.ElementAt( 2 -1));
          io_arrColumn3.AddAsLast(l_arr_strTokens.ElementAt( 3 -1));
        }
        if (i_intSortByColumn == 2)
        {
          io_arrColumn2.AddAsLast(l_arr_strTokens.ElementAt( 2 -1));
          io_arrColumn1.AddAsLast(l_arr_strTokens.ElementAt( 1 -1));
          io_arrColumn3.AddAsLast(l_arr_strTokens.ElementAt( 3 -1));
        }
        if (i_intSortByColumn == 3)
        {
          io_arrColumn3.AddAsLast(l_arr_strTokens.ElementAt( 3 -1));
          io_arrColumn1.AddAsLast(l_arr_strTokens.ElementAt( 1 -1));
          io_arrColumn2.AddAsLast(l_arr_strTokens.ElementAt( 2 -1));
        }
      }
    }
    Util2::Debug::TraceArray_3(Translate("After Sorting"), io_arrColumn1, io_arrColumn2, io_arrColumn3);
  }

  function DATA_HandOverDataToSMT_NGSStarLoading( variable i_strFullPathReportFile, variable i_intARWPlatformUsed, variable i_strKitProvider, variable i_strKitName, variable i_blnMPHUsed, variable i_blnLockUnlockSystem, variable i_str_TipCounter50, variable i_str_TipCounter300, variable i_str_TipCounter1000, sequence & i_seq_Tips50, sequence & i_seq_Tips300, sequence & i_seq_Tips1000, variable i_bln_CheckBarcodesInAdditionToTips ) void {
    private variable l_bln_FileExists;
    private variable l_bln_DeleteFile;
    private variable l_str_ErrorMessage;
    private variable l_str_FunctionName;
    private variable loopCounter1;
    private variable l_strCurrentLabIDTarget;
    private variable l_strTranslatedPipettingInformationDispense;
    private variable l_strTranslatedPipettingInformationAspiration;
    private variable l_strCurrentPosIDTarget;
    private variable l_strEmptyString;
    private variable l_strCurrentTime;
    private variable l_strCurrentDate;
    private variable l_strCurrentLabIDSource;
    private variable l_strTranslatedLoadingInformation;
    private variable l_strGetStepData;
    private variable l_strCurrentPosIDSource;
    private file l_hdlNGSStarReportFile2;
    private variable l_bln_ReportFileExists;
    _Abstract();
    l_str_FunctionName = Translate("");
    l_str_FunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    t_bln_TipSupportAdapterUsed = ASWGLOBAL::BOOL::FALSE;
    if (i_intARWPlatformUsed == 1)
    {
      t_blnPlatformNGSSTARused = ASWGLOBAL::BOOL::TRUE;
      t_str_PlatformUsed = Translate("NGSStar");
      if (i_blnMPHUsed == ASWGLOBAL::BOOL::TRUE)
      {
        t_str_PicturesDirectoryUsed = Translate("NGSStarMPH");
        t_bln_TipSupportAdapterUsed = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        t_str_PicturesDirectoryUsed = Translate("NGSStarChannel");
      }
    }
    else
    {
      t_blnPlatformNGSSTARused = ASWGLOBAL::BOOL::FALSE;
      t_str_PlatformUsed = Translate("ClinicalNGSStarlet");
      t_str_PicturesDirectoryUsed = Translate("ClinicalNGSStarlet");
    }
    t_blnLockUnlockSystem = i_blnLockUnlockSystem;
    t_arr_flt_RGT_TotalVolume.SetSize(0);
    t_arr_str_RGT_ReagentName.SetSize(0);
    t_arr_seq_RGT_SequencesToAspirate.SetSize(0);
    t_bln_CheckAditionalBarcodes = i_bln_CheckBarcodesInAdditionToTips;
    t_str_FullPathReportFile = i_strFullPathReportFile;
    g_str_KitProvider = i_strKitProvider;
    g_str_KitName = i_strKitName;
    t_str_HamiltonMainFileDirectory = Translate("C:\\Program Files (x86)\\HAMILTON\\");
    t_str_LoadingPicturesFileDirectory = StrConcat12(t_str_HamiltonMainFileDirectory, t_str_PlatformUsed, Translate("\\"), g_str_KitProvider, Translate("\\"), g_str_KitName, Translate("\\Library\\NGSStarLoading\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate(""), Translate(""), Translate(""));
    t_str_FullpathFile_RunData = StrConcat12(t_str_HamiltonMainFileDirectory, t_str_PlatformUsed, Translate("\\"), g_str_KitProvider, Translate("\\"), g_str_KitName, Translate("\\Library\\NGSStarLoading\\"), Translate("RunData.xls"), Translate(""), Translate(""), Translate(""), Translate(""));
    l_bln_FileExists = HSLExtensions::File::Exists(t_str_FullpathFile_RunData);
    l_bln_DeleteFile = ASWGLOBAL::BOOL::FALSE;
    if (l_bln_FileExists == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          l_bln_DeleteFile = HSLExtensions::File::Delete(t_str_FullpathFile_RunData);
          if (l_bln_DeleteFile == ASWGLOBAL::BOOL::FALSE)
          {
            l_str_ErrorMessage = StrConcat4(Translate("If RunData.xls is in use please, save it as a copy and close the original file: "), Translate("\n"), t_str_FullpathFile_RunData, Translate(""));
            Display_Message_Dialog(l_str_ErrorMessage);
          }
          else
          {
            break;
          }
        }
      }
    }
    t_strTipCounterNameTip1000 = i_str_TipCounter1000;
    t_strTipCounterNameTip300 = i_str_TipCounter300;
    t_strTipCounterNameTip50 = i_str_TipCounter50;
    SeqCopySequence(t_seqTips1000, i_seq_Tips1000);
    SeqCopySequence(t_seqTips300, i_seq_Tips300);
    SeqCopySequence(t_seqTips50, i_seq_Tips50);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_strKitProvider: "), i_strKitProvider);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_strKitName: "), i_strKitName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_intARWPlatformUsed: "), i_intARWPlatformUsed);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_blnMPHUsed: "), i_blnMPHUsed);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_blnLockUnlockSystem: "), i_blnLockUnlockSystem);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("t_str_FullpathFile_RunData: "), t_str_FullpathFile_RunData);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("t_str_LoadingPicturesFileDirectory: "), t_str_LoadingPicturesFileDirectory);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("t_str_FullPathReportFile: "), t_str_FullPathReportFile);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_str_TipCounter50: "), i_str_TipCounter50);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_str_TipCounter300: "), i_str_TipCounter300);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_str_TipCounter1000: "), i_str_TipCounter1000);
    file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
    file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
    file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
    file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
    file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
    file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
    file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
    file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
    file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
    file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
    file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
    file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
    file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
    file_RunData.AddField("DB_PrepareMastermixOnDeck", file_RunData_DB_PrepareMastermixOnDeck, hslInteger);
    file_RunData.AddField("DB_Ratio", file_RunData_DB_Ratio, hslFloat);
    file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
    if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    file_MultipleChoice.AddField("DialogID", file_MultipleChoice_DialogID, hslInteger);
    file_MultipleChoice.AddField("GroupName", file_MultipleChoice_GroupName, hslString, 255);
    file_MultipleChoice.AddField("Label", file_MultipleChoice_Label, hslString, 255);
    file_MultipleChoice.AddField("Selected", file_MultipleChoice_Selected, hslInteger);
    file_MultipleChoice.AddField("Editable", file_MultipleChoice_Editable, hslInteger);
    file_MultipleChoice.AddField("ToolTip", file_MultipleChoice_ToolTip, hslString, 255);
    if( 0 == file_MultipleChoice.Open(t_str_FullpathFile_RunData + " " + "MultipleChoiceDialog_Definition", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
    }
    if( 0 != file_MultipleChoice.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_MultipleChoice.RemoveFields();
    file_MM_Preparation.AddField("Mastermix_ID", file_MM_Preparation_Mastermix_ID, hslString, 255);
    file_MM_Preparation.AddField("Component_ID", file_MM_Preparation_Component_ID, hslString, 255);
    file_MM_Preparation.AddField("Ratio", file_MM_Preparation_Ratio, hslFloat);
    file_MM_Preparation.AddField("MastermixTube_ID", file_MM_Preparation_MastermixTube_ID, hslString, 255);
    file_MM_Preparation.AddField("MastermixTube_LabwareID", file_MM_Preparation_MastermixTube_LabwareID, hslString, 255);
    file_MM_Preparation.AddField("VolumeMastermixPerTube", file_MM_Preparation_VolumeMastermixPerTube, hslFloat);
    file_MM_Preparation.AddField("VolumeComponentPerTube", file_MM_Preparation_VolumeComponentPerTube, hslFloat);
    file_MM_Preparation.AddField("SourceComponentTube_ID", file_MM_Preparation_SourceComponentTube_ID, hslString, 255);
    file_MM_Preparation.AddField("SourceComponentTube_LabwareID", file_MM_Preparation_SourceComponentTube_LabwareID, hslString, 255);
    file_MM_Preparation.AddField("SourceVolumeComponentPerTube", file_MM_Preparation_SourceVolumeComponentPerTube, hslString, 255);
    if( 0 == file_MM_Preparation.Open(t_str_FullpathFile_RunData + " " + "Mastermix_Prep", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
    }
    if( 0 != file_MM_Preparation.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_MM_Preparation.RemoveFields();
    l_bln_ReportFileExists = HSLExtensions::File::Exists(t_str_FullPathReportFile);
    Trace("Check if report file was existing before : ",l_bln_ReportFileExists);
    if (l_bln_ReportFileExists == ASWGLOBAL::BOOL::FALSE)
    {
      l_hdlNGSStarReportFile2.AddField("Date", l_strCurrentDate, hslString, 255);
      l_hdlNGSStarReportFile2.AddField("Time", l_strCurrentTime, hslString, 255);
      l_hdlNGSStarReportFile2.AddField("LabID Source", l_strCurrentLabIDSource, hslString, 255);
      l_hdlNGSStarReportFile2.AddField("PosID Source", l_strCurrentPosIDSource, hslString, 255);
      l_hdlNGSStarReportFile2.AddField("Transfer Volume", l_strEmptyString, hslString, 255);
      l_hdlNGSStarReportFile2.AddField("LabID Target", l_strCurrentLabIDTarget, hslString, 255);
      l_hdlNGSStarReportFile2.AddField("PosID Target", l_strCurrentPosIDTarget, hslString, 255);
      l_hdlNGSStarReportFile2.AddField("Barcode", l_strGetStepData, hslString, 255);
      l_hdlNGSStarReportFile2.AddField("Transport information", l_strTranslatedLoadingInformation, hslString, 255);
      l_hdlNGSStarReportFile2.AddField("Aspiration information", l_strTranslatedPipettingInformationAspiration, hslString, 255);
      l_hdlNGSStarReportFile2.AddField("Dispense information", l_strTranslatedPipettingInformationDispense, hslString, 255);
      if( 0 == l_hdlNGSStarReportFile2.Open(t_str_FullPathReportFile + " " + "RuntimeReport", hslWrite) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullPathReportFile, "HxMetEdCompCmd");
      }
      if( 0 != l_hdlNGSStarReportFile2.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      l_hdlNGSStarReportFile2.RemoveFields();
    }
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  function Display_SelectProcesses_Dialog( variable i_int_MethodSelection, variable & i_arr_strProcessId[], variable & i_arr_strProcessCombinations[], variable & i_arr_intProcessDeactivatedStartPoints[], variable & i_arr_intProcessDeactivatedStopPoints[], variable & o_int_StartProcess, variable & o_int_StopProcess, variable & o_arr_blnProcessActivationStatus[] ) void {
    private variable l_strWrapOrientation_ElementsInDialog;
    private variable l_int_ProcessCounter;
    private variable l_intReturnDisplayDialog;
    private variable l_int_TotalNumberOfProcesses;
    private variable l_int_StartProcess;
    private variable l_str_ProcessCombination;
    private variable loopCounter1;
    private variable l_int_StopProcess;
    private variable l_str_TopText;
    private variable loopCounter3;
    private variable l_int_TotalNumberOfProcessPlusStartProcess;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable l_int_ReturnSearchProcessDeactivated;
    private variable l_arr_ToolTips[];
    private variable l_arr_IsSelected[];
    private variable l_arr_GroupName[];
    private variable l_arr_Labels[];
    private variable l_arr_IsEditable[];
    private variable l_str_FunctionName;
    private variable l_str_DeactivatedStopProcessId;
    private variable l_int_NumberOfDeactivatedStopPoints;
    private variable l_bln_DeactivatedSTARProcess_Detected;
    private variable l_str_DeactivatedStartProcessId;
    private variable l_int_NumberOfDeactivatedStartPoints;
    private variable l_int_ReturnLookUp_ProcessExistsInCombination;
    private variable l_int_ReturnLookUp_ProcessIsDeactivated;
    private variable l_arr_ProcessToShowOnSTARTDialog[];
    private variable l_arr_ProcessToShowOnSTOPDialog[];
    private variable l_int_SelectFirstProcessActivated;
    private variable loopCounter7;
    private variable loopCounter9;
    private variable l_int_CurrentProcess;
    private variable l_int_NumberOfProcessInCombination;
    private variable l_arr_int_ProcessCombination[];
    private variable l_arr_str_ProcessCombination[];
    o_int_StartProcess = 0;
    o_int_StopProcess = 0;
    o_arr_blnProcessActivationStatus.SetSize( 0);
    l_str_FunctionName = Translate("");
    l_str_FunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_int_MethodSelection: "), i_int_MethodSelection);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("i_arr_strProcessId: "), i_arr_strProcessId);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("i_arr_strProcessCombinations: "), i_arr_strProcessCombinations);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("i_arr_intProcessDeactivatedStartPoints: "), i_arr_intProcessDeactivatedStartPoints);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("i_arr_intProcessDeactivatedStopPoints: "), i_arr_intProcessDeactivatedStopPoints);
    o_arr_blnProcessActivationStatus.SetSize(0);
    l_arr_ProcessToShowOnSTARTDialog.SetSize(0);
    l_arr_ProcessToShowOnSTOPDialog.SetSize(0);
    l_arr_GroupName.SetSize(0);
    l_arr_Labels.SetSize(0);
    l_arr_IsEditable.SetSize(0);
    l_arr_IsSelected.SetSize(0);
    l_arr_ToolTips.SetSize(0);
    l_strWrapOrientation_ElementsInDialog = VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical;
    l_int_StartProcess = 0;
    l_int_StopProcess = 0;
    l_int_ProcessCounter = 0;
    l_int_TotalNumberOfProcesses=i_arr_strProcessId.GetSize();
    l_bln_DeactivatedSTARProcess_Detected = ASWGLOBAL::BOOL::FALSE;
    l_int_SelectFirstProcessActivated = 0;
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_TotalNumberOfProcesses;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_arr_GroupName.AddAsLast(Translate("Start Process"));
        l_int_ReturnSearchProcessDeactivated = ARRAYTOOLS::Lookup(i_arr_intProcessDeactivatedStartPoints, loopCounter1);
        if (l_int_ReturnSearchProcessDeactivated > 0)
        {
          l_arr_ProcessToShowOnSTARTDialog.AddAsLast(ASWGLOBAL::BOOL::FALSE);
          l_arr_IsEditable.AddAsLast(0);
          l_arr_IsSelected.AddAsLast(0);
        }
        else
        {
          l_arr_ProcessToShowOnSTARTDialog.AddAsLast(ASWGLOBAL::BOOL::TRUE);
          l_int_SelectFirstProcessActivated = l_int_SelectFirstProcessActivated + 1;
          l_arr_IsEditable.AddAsLast(1);
          if (l_int_SelectFirstProcessActivated == 1)
          {
            l_arr_IsSelected.AddAsLast(1);
          }
          else
          {
            l_arr_IsSelected.AddAsLast(0);
          }
        }
        l_arr_Labels.AddAsLast(i_arr_strProcessId.ElementAt( loopCounter1 -1));
      }
    }
    l_int_NumberOfDeactivatedStartPoints=i_arr_intProcessDeactivatedStartPoints.GetSize();
    l_str_TopText = Translate("Define Workflow ");
    {
      for(loopCounter5 = 0; loopCounter5 < l_int_NumberOfDeactivatedStartPoints;)
      {
        loopCounter5 = loopCounter5 + 1;
        l_str_DeactivatedStartProcessId=i_arr_strProcessId.GetAt(i_arr_intProcessDeactivatedStartPoints.ElementAt( loopCounter5 -1)-1);
        if (loopCounter5 == 1)
        {
          l_str_TopText = StrConcat8(l_str_TopText, Translate("Deactivated Starting Points:"), Translate("\n"), Translate("\n"), Translate("- "), Translate("["), l_str_DeactivatedStartProcessId, Translate("] "));
        }
        else
        {
          l_str_TopText = StrConcat8(l_str_TopText, Translate("\n"), Translate(""), Translate(""), Translate("- "), Translate("["), l_str_DeactivatedStartProcessId, Translate("] "));
        }
      }
    }
    l_intReturnDisplayDialog = VectorCustomDialogs::RadioButtonDialog(Translate(""), VectorCustomDialogs::ButtonType::AcceptCancel, 0, 0, l_str_TopText, Translate("Press Accept to confirm, Cancel to abort"), l_arr_Labels, l_arr_ToolTips, l_arr_IsEditable, l_arr_IsSelected, l_arr_GroupName, VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    if (l_intReturnDisplayDialog == 2)
    {
      abort;
    }
    {
      for(loopCounter3 = 0; loopCounter3 < l_int_TotalNumberOfProcesses;)
      {
        loopCounter3 = loopCounter3 + 1;
        l_int_ProcessCounter = l_int_ProcessCounter + 1;
        if (l_arr_IsSelected.ElementAt( loopCounter3 -1) == 1)
        {
          l_int_StartProcess = loopCounter3;
          o_arr_blnProcessActivationStatus.AddAsLast(ASWGLOBAL::BOOL::TRUE);
        }
        else
        {
          o_arr_blnProcessActivationStatus.AddAsLast(ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("o_arr_blnProcessActivationStatus: "), o_arr_blnProcessActivationStatus);
    l_arr_GroupName.SetSize(0);
    l_arr_Labels.SetSize(0);
    l_arr_IsEditable.SetSize(0);
    l_arr_IsSelected.SetSize(0);
    l_arr_ToolTips.SetSize(0);
    l_int_NumberOfDeactivatedStopPoints=i_arr_intProcessDeactivatedStopPoints.GetSize();
    l_str_TopText = Translate("Define Workflow ");
    {
      for(loopCounter5 = 0; loopCounter5 < l_int_NumberOfDeactivatedStopPoints;)
      {
        loopCounter5 = loopCounter5 + 1;
        l_str_DeactivatedStopProcessId=i_arr_strProcessId.GetAt(i_arr_intProcessDeactivatedStopPoints.ElementAt( loopCounter5 -1)-1);
        if (loopCounter5 == 1)
        {
          l_str_TopText = StrConcat8(l_str_TopText, Translate("Deactivated Stop Points:"), Translate("\n"), Translate("\n"), Translate("- "), Translate("["), l_str_DeactivatedStopProcessId, Translate("] "));
        }
        else
        {
          l_str_TopText = StrConcat8(l_str_TopText, Translate("\n"), Translate(""), Translate(""), Translate("- "), Translate("["), l_str_DeactivatedStopProcessId, Translate("] "));
        }
      }
    }
    l_arr_GroupName.AddAsLast(Translate("Start Process"));
    l_arr_Labels.AddAsLast(i_arr_strProcessId.ElementAt( l_int_StartProcess -1));
    l_arr_IsEditable.AddAsLast(0);
    l_arr_IsSelected.AddAsLast(0);
    l_arr_int_ProcessCombination.SetSize(0);
    l_str_ProcessCombination=i_arr_strProcessCombinations.GetAt(l_int_StartProcess-1);
    STRTOKENIZE::StrTokenize(l_str_ProcessCombination, Translate("."), l_arr_str_ProcessCombination, ASWGLOBAL::BOOL::FALSE);
    l_int_NumberOfProcessInCombination=l_arr_str_ProcessCombination.GetSize();
    {
      for(loopCounter7 = 0; loopCounter7 < l_int_NumberOfProcessInCombination;)
      {
        loopCounter7 = loopCounter7 + 1;
        l_int_CurrentProcess = StrIVal(l_arr_str_ProcessCombination.ElementAt( loopCounter7 -1));
        l_arr_int_ProcessCombination.AddAsLast(l_int_CurrentProcess);
      }
    }
    l_int_SelectFirstProcessActivated = 0;
    {
      for(loopCounter9 = 0; loopCounter9 < l_int_TotalNumberOfProcesses;)
      {
        loopCounter9 = loopCounter9 + 1;
        l_arr_GroupName.AddAsLast(Translate("Stop Process"));
        l_int_ReturnLookUp_ProcessExistsInCombination = ARRAYTOOLS::Lookup(l_arr_int_ProcessCombination, loopCounter9);
        if (l_int_ReturnLookUp_ProcessExistsInCombination > 0)
        {
          l_int_ReturnLookUp_ProcessIsDeactivated = ARRAYTOOLS::Lookup(i_arr_intProcessDeactivatedStopPoints, loopCounter9);
          if (l_int_ReturnLookUp_ProcessIsDeactivated > 0)
          {
            l_arr_IsEditable.AddAsLast(0);
            l_arr_IsSelected.AddAsLast(0);
          }
          else
          {
            l_int_SelectFirstProcessActivated = l_int_SelectFirstProcessActivated + 1;
            if (l_int_SelectFirstProcessActivated == 1)
            {
              l_arr_IsEditable.AddAsLast(1);
              l_arr_IsSelected.AddAsLast(1);
            }
            else
            {
              l_arr_IsEditable.AddAsLast(1);
              l_arr_IsSelected.AddAsLast(0);
            }
          }
          ARRAYTOOLS::Update_Value_in_Array(o_arr_blnProcessActivationStatus, ASWGLOBAL::BOOL::TRUE, loopCounter9);
        }
        else
        {
          l_arr_IsEditable.AddAsLast(0);
          l_arr_IsSelected.AddAsLast(0);
          ARRAYTOOLS::Update_Value_in_Array(o_arr_blnProcessActivationStatus, ASWGLOBAL::BOOL::FALSE, loopCounter9);
        }
        l_arr_Labels.AddAsLast(i_arr_strProcessId.ElementAt( loopCounter9 -1));
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("o_arr_blnProcessActivationStatus: "), o_arr_blnProcessActivationStatus);
    l_intReturnDisplayDialog = VectorCustomDialogs::RadioButtonDialog(Translate(""), VectorCustomDialogs::ButtonType::AcceptCancel, 0, 0, l_str_TopText, Translate("Press Accept to confirm, Cancel to abort"), l_arr_Labels, l_arr_ToolTips, l_arr_IsEditable, l_arr_IsSelected, l_arr_GroupName, VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    if (l_intReturnDisplayDialog == 2)
    {
      abort;
    }
    l_int_ProcessCounter = 0;
    l_int_TotalNumberOfProcessPlusStartProcess = l_int_TotalNumberOfProcesses + 1;
    {
      for(loopCounter4 = 0; loopCounter4 < l_int_TotalNumberOfProcessPlusStartProcess;)
      {
        loopCounter4 = loopCounter4 + 1;
        if (loopCounter4 != 1)
        {
          l_int_ProcessCounter = l_int_ProcessCounter + 1;
          if (l_arr_IsSelected.ElementAt( loopCounter4 -1) == 1)
          {
            l_int_StopProcess = l_int_ProcessCounter;
          }
        }
      }
    }
    o_int_StartProcess = l_int_StartProcess;
    o_int_StopProcess = l_int_StopProcess;
    {
      for(loopCounter9 = 0; loopCounter9 < l_int_TotalNumberOfProcesses;)
      {
        loopCounter9 = loopCounter9 + 1;
        if (loopCounter9 < l_int_StartProcess)
        {
          ARRAYTOOLS::Update_Value_in_Array(o_arr_blnProcessActivationStatus, ASWGLOBAL::BOOL::FALSE, loopCounter9);
        }
        if (loopCounter9 > l_int_StopProcess)
        {
          ARRAYTOOLS::Update_Value_in_Array(o_arr_blnProcessActivationStatus, ASWGLOBAL::BOOL::FALSE, loopCounter9);
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("User selected START Process: "), l_int_StartProcess);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("User selected STOP Process: "), l_int_StopProcess);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("o_arr_blnProcessActivationStatus: "), o_arr_blnProcessActivationStatus);
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  private function _RunDATA_Find_Record( variable i_str_ColumnName, variable i_value, variable i_CarrierName, variable i_int_FileHandler, variable & o_intNumberOfElementsFound ) variable {
    private variable l_int_RecordCounter;
    private variable l_str_SQLSentence;
    private variable l_str_inputValueVarType;
    private variable loopCounter1;
    private variable l_int_TotalNumberOfElements;
    o_intNumberOfElementsFound = 0;
    l_int_RecordCounter = 0;
    l_str_SQLSentence = Translate("");
    l_str_inputValueVarType = StrGetType(i_value);
    if (i_CarrierName == "")
    {
      if (l_str_inputValueVarType == "s")
      {
        l_str_SQLSentence = StrConcat12("SELECT * FROM [RunDATA$] WHERE [",i_str_ColumnName,"] = '",i_value,"","","'","","","","","");
        Trace(l_str_SQLSentence);
      }
      else
      {
        l_str_SQLSentence = StrConcat12("SELECT * FROM [RunDATA$] WHERE [",i_str_ColumnName,"] = ",i_value,"","","","","","","","");
        Trace(l_str_SQLSentence);
      }
    }
    else
    {
      if (l_str_inputValueVarType == "s")
      {
        l_str_SQLSentence = StrConcat12("SELECT * FROM [RunDATA$] WHERE [",i_str_ColumnName,"] = '",i_value,"' AND [DB_CarrierName] = '",i_CarrierName,"'","","","","","");
        Trace(l_str_SQLSentence);
      }
      else
      {
        l_str_SQLSentence = StrConcat12("SELECT * FROM [RunDATA$] WHERE [",i_str_ColumnName,"] = ",i_value," AND [DB_CarrierName] = '",i_CarrierName,"'","","","","","");
        Trace(l_str_SQLSentence);
      }
    }
    l_int_TotalNumberOfElements = 0;
    if (i_int_FileHandler == 1)
    {
      file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
      file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
      file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
      file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
      file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
      file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
      file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
      file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
      file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
      file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
      file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
      file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
      file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, l_str_SQLSentence) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
      {
        loopCounter1 = 0;
        while (
           (file_RunData.Eof() == 0)
        )
        {
          loopCounter1 = loopCounter1 + 1;
          if( 0 == file_RunData.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_int_RecordCounter = l_int_RecordCounter + 1;
          if (i_CarrierName != "")
          {
            l_int_TotalNumberOfElements = l_int_TotalNumberOfElements + file_RunData_DB_Units;
          }
        }
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
    }
    else
    {
      file_MultipleChoice.AddField("DialogID", file_MultipleChoice_DialogID, hslString, 255);
      file_MultipleChoice.AddField("GroupName", file_MultipleChoice_GroupName, hslString, 255);
      file_MultipleChoice.AddField("Label", file_MultipleChoice_Label, hslString, 255);
      file_MultipleChoice.AddField("Selected", file_MultipleChoice_Selected, hslString, 255);
      file_MultipleChoice.AddField("Editable", file_MultipleChoice_Editable, hslString, 255);
      file_MultipleChoice.AddField("ToolTip", file_MultipleChoice_ToolTip, hslString, 255);
      if( 0 == file_MultipleChoice.Open(t_str_FullpathFile_RunData + " " + "MultipleChoiceDialog_Definition$", hslRead, l_str_SQLSentence) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
      {
        loopCounter1 = 0;
        while (
           (file_MultipleChoice.Eof() == 0)
        )
        {
          loopCounter1 = loopCounter1 + 1;
          if( 0 == file_MultipleChoice.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_int_RecordCounter = l_int_RecordCounter + 1;
        }
      }
      if( 0 != file_MultipleChoice.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_MultipleChoice.RemoveFields();
    }
    if (l_int_RecordCounter > 0)
    {
      if (i_CarrierName != "")
      {
        o_intNumberOfElementsFound = l_int_TotalNumberOfElements;
      }
      else
      {
        o_intNumberOfElementsFound = file_RunData_DB_Units;
      }
      return (ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      o_intNumberOfElementsFound = 0;
      return (ASWGLOBAL::BOOL::FALSE);
    }
  }

  private function _RunDATA_AddRecord( variable i_str_ColumnName, variable i_value, variable i_int_FileHandler ) variable {
    private variable l_str_inputValueVarType;
    private variable l_int_RecordCounter;
    private variable l_str_RunDATA_TableNameDollar;
    l_str_inputValueVarType = StrGetType(i_value);
    if (i_int_FileHandler == 1)
    {
      l_str_RunDATA_TableNameDollar = StrConcat2(Translate("RunData"), Translate("$"));
    }
    if (i_int_FileHandler == 2)
    {
      l_str_RunDATA_TableNameDollar = StrConcat2(Translate("MultipleChoiceDialog_Definition"), Translate("$"));
    }
    if (i_int_FileHandler == 3)
    {
      l_str_RunDATA_TableNameDollar = StrConcat2(Translate("SummaryMasterMixPrep"), Translate("$"));
    }
    if (l_str_inputValueVarType == "i")
    {
      file_RunData.AddField(i_str_ColumnName, i_value, hslInteger);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
    }
    if (l_str_inputValueVarType == "f")
    {
      file_RunData.AddField(i_str_ColumnName, i_value, hslFloat);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
    }
    if (l_str_inputValueVarType == "s")
    {
      file_RunData.AddField(i_str_ColumnName, i_value, hslString, 255);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
    }
    if( 0 == file_RunData.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_int_RecordCounter = l_int_RecordCounter + 1;
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    if (l_int_RecordCounter > 0)
    {
      TRACELEVEL::Trace_10(Translate("Add Value: "), i_value, Translate(" to Column: "), i_str_ColumnName, Translate(" in file "), l_str_RunDATA_TableNameDollar, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      return (ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
  }

  private function _Reset_FileRunData_Variables(  ) void {
    file_RunData_DB_DeadVolumeLabware = 0;
    file_RunData_DB_DeadVolumePercent = 0;
    file_RunData_DB_TotalVolume = 0;
    file_RunData_DB_VolumePerWell = 0;
    file_RunData_DB_CarrierName = Translate("");
    file_RunData_DB_LabwareName = Translate("");
    file_RunData_DB_LabwareType = Translate("");
    file_RunData_DB_PositionID = Translate("");
    file_RunData_DB_ReagentType = Translate("");
    file_RunData_DB_MasterMixComponentName = Translate("");
    file_RunData_DB_ReagentName = Translate("");
    file_RunData_DB_ReagentNameANDLabwareType = Translate("");
    file_RunData_DB_SiteID = Translate("");
    file_RunData_DB_Units = 0;
    file_RunData_DB_Units = 0;
    file_MM_Preparation_Component_ID = Translate("");
    file_MM_Preparation_Mastermix_ID = Translate("");
    file_MM_Preparation_MastermixTube_ID = Translate("");
    file_MM_Preparation_MastermixTube_LabwareID = Translate("");
    file_MM_Preparation_Ratio = 0.0;
    file_MM_Preparation_SourceComponentTube_ID = Translate("");
    file_MM_Preparation_SourceComponentTube_LabwareID = Translate("");
    file_MM_Preparation_SourceVolumeComponentPerTube = Translate("");
    file_MM_Preparation_VolumeComponentPerTube = 0.0;
    file_MM_Preparation_VolumeMastermixPerTube = 0.0;
  }

  private function _RunDATA_UpdateRecord( variable i_str_SheetName, variable i_str_ColumnName, variable i_keyNewValue, variable i_str_ColumnReference, variable i_keyValueReference ) void {
    private variable l_str_SQLSentence;
    private variable l_str_Type_keyNewValue;
    private variable l_str_Type_keyValueReference;
    private variable l_bln_errorUpdating;
    private variable loopCounter1;
    private timer l_timer_errorUpdating;
    l_bln_errorUpdating = ASWGLOBAL::BOOL::TRUE;
    i_str_SheetName = StrConcat2(i_str_SheetName, Translate("$"));
    {
      loopCounter1 = 0;
      while (l_bln_errorUpdating == ASWGLOBAL::BOOL::TRUE)
      {
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_5 ;
        err.Clear();
        l_str_Type_keyNewValue = StrGetType(i_keyNewValue);
        l_str_Type_keyValueReference = StrGetType(i_keyValueReference);
        if (l_str_Type_keyNewValue == "s")
        {
          if (l_str_Type_keyValueReference == "s")
          {
            l_str_SQLSentence=StrConcat12("UPDATE [",i_str_SheetName,"] SET [",i_str_ColumnName,"] ='",i_keyNewValue,"' WHERE [",i_str_ColumnReference,"] = '",i_keyValueReference,"'","");
            Trace(l_str_SQLSentence);
            //DB_VolumePerWell	DB_DeadVolumeLabware	DB_DeadVolumePercent	DB_TotalVolume	DB_CarrierName	DB_SiteID	DB_Units	DB_LabwareType	DB_LabwareName	DB_PositionID	DB_ReagentName	DB_ReagentType	DB_ReagentNameANDLabwareType
          }
          else
          {
            l_str_SQLSentence=StrConcat12("UPDATE [",i_str_SheetName,"] SET [",i_str_ColumnName,"] ='",i_keyNewValue,"' WHERE [",i_str_ColumnReference,"] = ",i_keyValueReference,"","");
            Trace(l_str_SQLSentence);
            //DB_VolumePerWell	DB_DeadVolumeLabware	DB_DeadVolumePercent	DB_TotalVolume	DB_CarrierName	DB_SiteID	DB_Units	DB_LabwareType	DB_LabwareName	DB_PositionID	DB_ReagentName	DB_ReagentType	DB_ReagentNameANDLabwareType
          }
          file_RunData.AddField(i_str_ColumnName, i_keyNewValue, hslString, 255);
          if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + i_str_SheetName, hslRead, l_str_SQLSentence) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
          }
        }
        else
        {
          if (l_str_Type_keyValueReference == "s")
          {
            l_str_SQLSentence=StrConcat12("UPDATE [",i_str_SheetName,"] SET [",i_str_ColumnName,"] =",i_keyNewValue," WHERE [",i_str_ColumnReference,"] = '",i_keyValueReference,"'","");
            Trace(l_str_SQLSentence);
            //DB_VolumePerWell	DB_DeadVolumeLabware	DB_DeadVolumePercent	DB_TotalVolume	DB_CarrierName	DB_SiteID	DB_Units	DB_LabwareType	DB_LabwareName	DB_PositionID	DB_ReagentName	DB_ReagentType	DB_ReagentNameANDLabwareType
          }
          else
          {
            l_str_SQLSentence=StrConcat12("UPDATE [",i_str_SheetName,"] SET [",i_str_ColumnName,"] =",i_keyNewValue," WHERE [",i_str_ColumnReference,"] = ",i_keyValueReference,"","");
            Trace(l_str_SQLSentence);
            //DB_VolumePerWell	DB_DeadVolumeLabware	DB_DeadVolumePercent	DB_TotalVolume	DB_CarrierName	DB_SiteID	DB_Units	DB_LabwareType	DB_LabwareName	DB_PositionID	DB_ReagentName	DB_ReagentType	DB_ReagentNameANDLabwareType
          }
          if (l_str_Type_keyNewValue == "f")
          {
            file_RunData.AddField(i_str_ColumnName, i_keyNewValue, hslFloat);
            if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + i_str_SheetName, hslRead, l_str_SQLSentence) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
            }
          }
          else
          {
            file_RunData.AddField(i_str_ColumnName, i_keyNewValue, hslInteger);
            if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + i_str_SheetName, hslRead, l_str_SQLSentence) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != file_RunData.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file_RunData.RemoveFields();
        l_bln_errorUpdating = ASWGLOBAL::BOOL::FALSE;
        errLabel_5 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          l_bln_errorUpdating = ASWGLOBAL::BOOL::TRUE;
          if( 0 == l_timer_errorUpdating.SetTimer(2) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_timer_errorUpdating.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }   /* end if from skip handler if no error */
        if (loopCounter1 == 2)
        {
          if (l_bln_errorUpdating == ASWGLOBAL::BOOL::TRUE)
          {
            Display_Error_Dialog(Translate("Cannot access to RunData File to Update Data. Restart Protocol"));
          }
        }
      }
    }
  }

  private function Define_VolumePerBarcodeTube( variable & i_arr_BarcodeFrequency[], variable & i_arr_BarcodeDistinct[], variable i_int_NumberOfBarcodeTubes, variable i_str_BarcodeName, variable i_flt_VolumePerBarcode, variable & o_arr_BarcodeNamesAll[] ) variable {
    private variable loopCounter7;
    private variable l_intBarcodeArrayLookup;
    private variable l_blnBarcodeArrayLookupSuccess;
    private variable l_intStrLoopCounterLength;
    private variable l_intBarcodeUniqueLength;
    private variable l_strBarcodeName;
    private variable l_blnSuccessfulConversion;
    private variable l_strLoopCounter;
    private variable loopCounter2;
    private variable l_intNumberOfBarcodesUsed;
    private variable loopCounter4;
    private variable l_fltBarcodeVolume;
    private variable l_arrBarcodesPositionsAll[];
    private variable l_arrBarcodesNamesAll[];
    private variable l_arrBarcodesUnique_IntegerFormat[];
    private variable l_arrBarcodesAll[];
    MECC::TraceComment(Translate("************************************************************************************************************\n                    Define_VolumePerBarcodeTube\n************************************************************************************************************\n"));
    l_arrBarcodesAll.SetSize(0);
    l_arrBarcodesPositionsAll.SetSize(0);
    {
      for(loopCounter4 = 0; loopCounter4 < i_int_NumberOfBarcodeTubes;)
      {
        loopCounter4 = loopCounter4 + 1;
        l_strBarcodeName = i_str_BarcodeName;
        l_strLoopCounter = StrIStr(loopCounter4);
        l_intStrLoopCounterLength = StrGetLength(l_strLoopCounter);
        l_arrBarcodesAll.AddAsLast(l_strLoopCounter);
        l_arrBarcodesPositionsAll.AddAsLast(loopCounter4);
      }
    }
    l_intNumberOfBarcodesUsed=i_arr_BarcodeFrequency.GetSize();
    l_arrBarcodesNamesAll.SetSize(0);
    l_arrBarcodesUnique_IntegerFormat = HSLExtensions::Array::ConvertToIntegerArray(i_arr_BarcodeDistinct, l_blnSuccessfulConversion);
    ARRAYTOOLS::Sort3ArraysByNumericAscendingOrder(l_arrBarcodesUnique_IntegerFormat, i_arr_BarcodeDistinct, i_arr_BarcodeFrequency);
    {
      for(loopCounter7 = 0; loopCounter7 < l_intNumberOfBarcodesUsed;)
      {
        loopCounter7 = loopCounter7 + 1;
        l_strBarcodeName = i_str_BarcodeName;
        l_intBarcodeUniqueLength = StrGetLength(i_arr_BarcodeDistinct.ElementAt( loopCounter7 -1));
        if (l_intBarcodeUniqueLength == 1)
        {
          l_strBarcodeName = StrConcat4(l_strBarcodeName, Translate("0"), i_arr_BarcodeDistinct.ElementAt( loopCounter7 -1), Translate(""));
        }
        else
        {
          l_strBarcodeName = StrConcat4(l_strBarcodeName, i_arr_BarcodeDistinct.ElementAt( loopCounter7 -1), Translate(""), Translate(""));
        }
        l_arrBarcodesNamesAll.AddAsLast(l_strBarcodeName);
      }
    }
    {
      for(loopCounter2 = 0; loopCounter2 < i_int_NumberOfBarcodeTubes;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_blnBarcodeArrayLookupSuccess = APPSLIB::ArrayLookup(i_arr_BarcodeDistinct, l_arrBarcodesAll.ElementAt( loopCounter2 -1), l_intBarcodeArrayLookup);
        if (l_blnBarcodeArrayLookupSuccess == ASWGLOBAL::BOOL::TRUE)
        {
          if (l_intBarcodeArrayLookup == 0)
          {
            l_fltBarcodeVolume = 0;
          }
          else
          {
            l_fltBarcodeVolume = i_flt_VolumePerBarcode * i_arr_BarcodeFrequency.ElementAt( l_intBarcodeArrayLookup -1);
            Define_VolumePerWell(l_arrBarcodesNamesAll.ElementAt( l_intBarcodeArrayLookup -1), l_fltBarcodeVolume);
          }
        }
        else
        {
          l_fltBarcodeVolume = 0;
        }
      }
    }
    o_arr_BarcodeNamesAll = HSLExtensions::Array::Copy(l_arrBarcodesNamesAll);
    return (i_flt_VolumePerBarcode);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    Define_VolumePerBarcodeTube\n************************************************************************************************************\n"));
  }

  private function DATA_TipCounterWrite( device & ML_STAR ) void {
    private variable l_intCurrentPosition_1000;
    private variable l_intCurrentPosition_50;
    private variable l_intCurrentPosition_300;
    private variable l_intEndPosition_1000;
    private variable l_intEndPosition_300;
    private variable l_intEndPosition_50;
    private variable l_str_FunctionName;
    l_str_FunctionName = Translate("");
    l_str_FunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, t_seqTips50, t_strTipCounterNameTip50);
    l_intCurrentPosition_50 = t_seqTips50.GetCurrentPosition();
    l_intEndPosition_50 = t_seqTips50.GetCount();
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, t_seqTips300, t_strTipCounterNameTip300);
    l_intCurrentPosition_300 = t_seqTips300.GetCurrentPosition();
    l_intEndPosition_300 = t_seqTips300.GetCount();
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, t_seqTips1000, t_strTipCounterNameTip1000);
    l_intCurrentPosition_1000 = t_seqTips1000.GetCurrentPosition();
    l_intEndPosition_1000 = t_seqTips1000.GetCount();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  private function DATA_TipCounterRead( device & ML_STAR, variable i_intNumberOfTip50_required, variable i_intNumberOfTip300_required, variable i_intNumberOfTip1000_required, variable i_intTipTypeToBeProcessed, variable i_blnAlwaysEditTipcounter, variable i_blnShowGUITipAndTimeCalculation ) void {
    private variable t_intMaxSeqTips50AfterEdit;
    private variable t_intConsumedTips300;
    private variable l_strDisplayText_Insufficient50s;
    private variable l_strText_Insufficient50s;
    private variable l_blnProcessTip1000;
    private variable l_blnScheduleTipReloadDuringProcess;
    private variable t_intConsumedTips300BeforeRelaodTips;
    private variable t_intConsumedTips50;
    private variable t_intMaxSeqTips1000AfterEdit;
    private variable l_blnReloadAllTipTypes;
    private variable l_strDisplayText_Insufficient300s;
    private variable l_strText_Insufficient1000s;
    private variable l_blnProcessTip300;
    private variable l_strLabwareIDCarrier;
    private variable l_intCurrentPosition_1000;
    private variable l_strText_Insufficient300s;
    private variable l_intCalculatedQuantity_1000;
    private variable l_intCalculatedQuantity_300;
    private variable l_retValueDialog;
    private variable l_intCurrentPosition_50;
    private variable t_intConsumedTips50BeforeRelaodTips;
    private variable l_intCurrentPosition_300;
    private variable l_intEndPosition_1000;
    private variable t_intMaxSeqTips300AfterEdit;
    private variable t_intConsumedTips1000BeforeRelaodTips;
    private variable l_intReturnValueMessageDialog;
    private variable loopCounter1;
    private variable l_intEndPosition_300;
    private variable l_blnProcessTip50;
    private variable l_strDisplayText_Insufficient1000s;
    private variable t_intTotalConsumedTips50;
    private variable t_blnInsuffientTips;
    private variable t_intConsumedTips1000;
    private variable l_intCalculatedQuantity_50;
    private variable l_intEndPosition_50;
    private variable t_blnReduceTip1000sequence;
    private variable t_intNumberOfAllAvailableChannels;
    private variable l_strStepRetrunValueLoadCarrier;
    private variable l_arrListTipCalculationMessage[];
    private variable l_str_FunctionName;
    l_str_FunctionName = Translate("");
    l_str_FunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    Trace ("---Number of 50uL tips required: ", i_intNumberOfTip50_required);
    Trace ("---Number of 300uL tips required: ", i_intNumberOfTip300_required);
    Trace ("---Number of 1000uL tips required: ", i_intNumberOfTip1000_required);
    Trace("Read current tip status from database using following tipcounter . t_strTipCounterNameTip50 : ",t_strTipCounterNameTip50," ; t_strTipCounterNameTip300 : ",t_strTipCounterNameTip300," ; t_strTipCounterNameTip1000 : ",t_strTipCounterNameTip1000);
    l_blnProcessTip50 = ASWGLOBAL::BOOL::FALSE;
    l_blnProcessTip300 = ASWGLOBAL::BOOL::FALSE;
    l_blnProcessTip1000 = ASWGLOBAL::BOOL::FALSE;
    l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::FALSE;
    if (i_intTipTypeToBeProcessed == 4)
    {
      l_blnProcessTip50 = ASWGLOBAL::BOOL::TRUE;
      l_blnProcessTip300 = ASWGLOBAL::BOOL::TRUE;
      l_blnProcessTip1000 = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      if (i_intTipTypeToBeProcessed == 1)
      {
        l_blnProcessTip50 = ASWGLOBAL::BOOL::TRUE;
      }
      if (i_intTipTypeToBeProcessed == 2)
      {
        l_blnProcessTip300 = ASWGLOBAL::BOOL::TRUE;
      }
      if (i_intTipTypeToBeProcessed == 3)
      {
        l_blnProcessTip1000 = ASWGLOBAL::BOOL::TRUE;
      }
    }
    l_strText_Insufficient50s = Translate(" No reload of this tip type necessary");
    l_strText_Insufficient300s = Translate(" No reload of this tip type necessary");
    l_strText_Insufficient1000s = Translate(" No reload of this tip type necessary");
    if (l_blnProcessTip50 == ASWGLOBAL::BOOL::TRUE)
    {
      if (i_blnAlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, t_seqTips50, t_strTipCounterNameTip50, 9999);
        t_intMaxSeqTips50AfterEdit = t_seqTips50.GetCount();
        DATA_TipCounterWrite(ML_STAR);
      }
      else
      {
        STAR_TIP_TOOLS::TipCounter_Read(ML_STAR, t_seqTips50, t_strTipCounterNameTip50);
      }
      l_intCurrentPosition_50 = t_seqTips50.GetCurrentPosition();
      l_intEndPosition_50 = t_seqTips50.GetCount();
      l_intCalculatedQuantity_50 = l_intEndPosition_50 - l_intCurrentPosition_50;
      l_intCalculatedQuantity_50 = l_intCalculatedQuantity_50 + 1;
      t_intConsumedTips50 = t_intMaxSeqTips50AfterEdit - l_intCalculatedQuantity_50;
      if (t_intTotalConsumedTips50 < 0)
      {
        t_intConsumedTips50 = 0;
      }
      TrcTrace12(Translate("CurrentPosition_50 : "), l_intCurrentPosition_50, Translate(" - EndPosition_50 : "), l_intEndPosition_50, Translate(" - Quantity_50 : "), l_intCalculatedQuantity_50, Translate(" - _intMaxSeqTips50AfterEdit : "), t_intMaxSeqTips50AfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTips50 : "), t_intConsumedTips50);
      if (l_intCalculatedQuantity_50 < i_intNumberOfTip50_required)
      {
        t_blnInsuffientTips = 1;
        if (i_intNumberOfTip50_required > 960)
        {
          l_strText_Insufficient50s = Translate("\nPlease load two full carriers of 50ul tips.  You will need to come back later to replenish.");
        }
        else
        {
          l_strText_Insufficient50s = Translate("\nPlease load more 50ul tips.  You will need at least this many:  ");
          l_strText_Insufficient50s = StrConcat2(l_strText_Insufficient50s, i_intNumberOfTip50_required);
        }
      }
      else
      {
        l_strText_Insufficient50s = Translate(" No reload of this tip type necessary");
      }
    }
    if (l_blnProcessTip300 == ASWGLOBAL::BOOL::TRUE)
    {
      if (i_blnAlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, t_seqTips300, t_strTipCounterNameTip300, 9999);
        t_intMaxSeqTips300AfterEdit = t_seqTips300.GetCount();
        DATA_TipCounterWrite(ML_STAR);
      }
      else
      {
        STAR_TIP_TOOLS::TipCounter_Read(ML_STAR, t_seqTips300, t_strTipCounterNameTip300);
      }
      l_intCurrentPosition_300 = t_seqTips300.GetCurrentPosition();
      l_intEndPosition_300 = t_seqTips300.GetCount();
      l_intCalculatedQuantity_300 = l_intEndPosition_300 - l_intCurrentPosition_300;
      l_intCalculatedQuantity_300 = l_intCalculatedQuantity_300 + 1;
      t_intConsumedTips300 = t_intMaxSeqTips300AfterEdit - l_intCalculatedQuantity_300;
      if (t_intConsumedTips300 < 0)
      {
        t_intConsumedTips300 = 0;
      }
      TrcTrace12(Translate("CurrentPosition_300 : "), l_intCurrentPosition_300, Translate(" - EndPosition_300 : "), l_intEndPosition_300, Translate(" - Quantity_300 : "), l_intCalculatedQuantity_300, Translate(" - _intMaxSeqTips300AfterEdit : "), t_intMaxSeqTips300AfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTips300 : "), t_intConsumedTips300);
      if (l_intCalculatedQuantity_300 < i_intNumberOfTip300_required)
      {
        t_blnInsuffientTips = 1;
        if (i_intNumberOfTip300_required > 960)
        {
          l_strText_Insufficient300s = Translate("\nPlease load two full carriers of 300ul tips.  You will need to come back later to replenish.");
        }
        else
        {
          l_strText_Insufficient300s = Translate("\nPlease load more 300ul tips.  You will need at least this many:  ");
          l_strText_Insufficient300s = StrConcat2(l_strText_Insufficient300s, i_intNumberOfTip300_required);
        }
      }
      else
      {
        l_strText_Insufficient300s = Translate(" No reload of this tip type necessary");
      }
    }
    if (l_blnProcessTip1000 == ASWGLOBAL::BOOL::TRUE)
    {
      if (i_blnAlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, t_seqTips1000, t_strTipCounterNameTip1000, 9999);
        t_intMaxSeqTips1000AfterEdit = t_seqTips1000.GetCount();
        DATA_TipCounterWrite(ML_STAR);
      }
      else
      {
        STAR_TIP_TOOLS::TipCounter_Read(ML_STAR, t_seqTips1000, t_strTipCounterNameTip1000);
      }
      l_intCurrentPosition_1000 = t_seqTips1000.GetCurrentPosition();
      l_intEndPosition_1000 = t_seqTips1000.GetCount();
      l_intCalculatedQuantity_1000 = l_intEndPosition_1000 - l_intCurrentPosition_1000;
      l_intCalculatedQuantity_1000 = l_intCalculatedQuantity_1000 + 1;
      t_intConsumedTips1000 = t_intMaxSeqTips1000AfterEdit - l_intCalculatedQuantity_1000;
      if (t_intConsumedTips1000 < 0)
      {
        t_intConsumedTips1000 = 0;
      }
      TrcTrace12(Translate("CurrentPosition_1000 : "), l_intCurrentPosition_1000, Translate(" - EndPosition_1000 : "), l_intEndPosition_1000, Translate(" - Quantity_1000 : "), l_intCalculatedQuantity_1000, Translate(" - _intMaxSeqTips1000AfterEdit : "), t_intMaxSeqTips1000AfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTips1000 : "), t_intConsumedTips1000);
      if (l_intCalculatedQuantity_1000 < i_intNumberOfTip1000_required)
      {
        t_blnInsuffientTips = 1;
        if (i_intNumberOfTip1000_required > 96)
        {
          l_strText_Insufficient1000s = Translate("\nPlease load 2 (only 1 for MPH version) full racks of 1000ul tips.  You will need to come back later to replenish.");
        }
        else
        {
          l_strText_Insufficient1000s = Translate("\nPlease load more 1000ul tips.  You will need at least this many:  ");
          l_strText_Insufficient1000s = StrConcat2(l_strText_Insufficient1000s, i_intNumberOfTip1000_required);
        }
      }
      else
      {
        l_strText_Insufficient1000s = Translate(" No reload of this tip type necessary");
      }
    }
    if (t_blnInsuffientTips == 1)
    {
      if (l_blnProcessTip50 == ASWGLOBAL::BOOL::TRUE)
      {
        if (i_intNumberOfTip50_required > 960)
        {
          l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (l_blnProcessTip300 == ASWGLOBAL::BOOL::TRUE)
      {
        if (i_intNumberOfTip300_required > 960)
        {
          l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (l_blnProcessTip1000 == ASWGLOBAL::BOOL::TRUE)
      {
        if (t_blnReduceTip1000sequence == ASWGLOBAL::BOOL::TRUE)
        {
          if (i_intNumberOfTip1000_required > 96)
          {
            l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
          }
        }
        else
        {
          if (i_intNumberOfTip1000_required > 192)
          {
            l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
          }
        }
      }
      if (l_blnScheduleTipReloadDuringProcess == ASWGLOBAL::BOOL::TRUE)
      {
        l_arrListTipCalculationMessage.SetSize(0);
        l_strDisplayText_Insufficient50s = StrConcat2(Translate(" Tip type 50 ul filter : "), l_strText_Insufficient50s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient50s);
        l_strDisplayText_Insufficient300s = StrConcat2(Translate(" Tip type 300 ul filter : "), l_strText_Insufficient300s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient300s);
        l_strDisplayText_Insufficient1000s = StrConcat2(Translate(" Tip type 1000 ul filter : "), l_strText_Insufficient1000s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient1000s);
        VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Not enough tips available."), Translate("The amount of needed tips exceeds the maximum capacity of available tips. A reload step will be scheduled within the process."), l_arrListTipCalculationMessage);
        l_strText_Insufficient50s = Translate(" No reload of this tip type necessary");
        l_strText_Insufficient300s = Translate(" No reload of this tip type necessary");
        l_strText_Insufficient1000s = Translate(" No reload of this tip type necessary");
        l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::FALSE;
        t_blnInsuffientTips = ASWGLOBAL::BOOL::FALSE;
      }
      else
      {
        l_blnReloadAllTipTypes = ASWGLOBAL::BOOL::FALSE;
        l_arrListTipCalculationMessage.SetSize(0);
        l_strDisplayText_Insufficient50s = StrConcat2(Translate(" Tip type 50 ul filter : "), l_strText_Insufficient50s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient50s);
        l_strDisplayText_Insufficient300s = StrConcat2(Translate(" Tip type 300 ul filter : "), l_strText_Insufficient300s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient300s);
        l_strDisplayText_Insufficient1000s = StrConcat2(Translate(" Tip type 1000 ul filter : "), l_strText_Insufficient1000s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient1000s);
        l_retValueDialog = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Not enough tips available - refill tips according to shown list"), Translate("The amount of needed tips exceeds the maximum capacity of available tips. A reload step will be scheduled within the process."), l_arrListTipCalculationMessage);
        l_intReturnValueMessageDialog = VectorCustomDialogs::MessageDialog(Translate(""), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Preventative tip exchange : Do you want to take the chance to reload all tip types?"));
        if (l_intReturnValueMessageDialog == ASWGLOBAL::DIALOG::YES)
        {
          l_blnReloadAllTipTypes = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          l_blnReloadAllTipTypes = ASWGLOBAL::BOOL::FALSE;
        }
      }
      if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
      }
      if (l_blnReloadAllTipTypes == ASWGLOBAL::BOOL::TRUE)
      {
        l_strText_Insufficient50s = Translate(" Preventive reload of this tip type necessary");
        l_strText_Insufficient300s = Translate(" Preventive reload of this tip type necessary");
        l_strText_Insufficient1000s = Translate(" Preventive reload of this tip type necessary");
      }
      if (l_strText_Insufficient50s != " No reload of this tip type necessary")
      {
        t_intConsumedTips50BeforeRelaodTips = t_intConsumedTips50;
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        }
        if (t_intNumberOfAllAvailableChannels == 8)
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_50F_PINK_0001");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_50F_PINK_0002");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
        else
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_A00_0001");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
        STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, t_seqTips50, t_strTipCounterNameTip50, 9999);
        t_intMaxSeqTips50AfterEdit = t_seqTips50.GetCount();
        DATA_TipCounterWrite(ML_STAR);
        if (t_intNumberOfAllAvailableChannels == 8)
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_50F_PINK_0001");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_50F_PINK_0002");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        }
        else
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_A00_0001");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        }
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          {
            loopCounter1 = 0;
            while (1 == 1)
            {
              loopCounter1 = loopCounter1 + 1;
              onerror goto errLabel_6 ;
              err.Clear();
              ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              break;
              errLabel_6 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              }   /* end if from skip handler if no error */
            }
          }
        }
      }
      if (l_strText_Insufficient300s != " No reload of this tip type necessary")
      {
        t_intConsumedTips300BeforeRelaodTips = t_intConsumedTips300;
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        }
        if (t_intNumberOfAllAvailableChannels == 8)
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_STF_YELLOW_0001");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_STF_YELLOW_0002");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
        else
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_A00_0002");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
        STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, t_seqTips300, t_strTipCounterNameTip300, 9999);
        t_intMaxSeqTips300AfterEdit = t_seqTips300.GetCount();
        DATA_TipCounterWrite(ML_STAR);
        if (t_intNumberOfAllAvailableChannels == 8)
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_STF_YELLOW_0001");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_STF_YELLOW_0002");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        }
        else
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_A00_0002");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        }
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          {
            loopCounter1 = 0;
            while (1 == 1)
            {
              loopCounter1 = loopCounter1 + 1;
              onerror goto errLabel_7 ;
              err.Clear();
              ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              break;
              errLabel_7 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              }   /* end if from skip handler if no error */
            }
          }
        }
      }
      if (l_strText_Insufficient1000s != " No reload of this tip type necessary")
      {
        t_intConsumedTips1000BeforeRelaodTips = t_intConsumedTips1000;
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        }
        l_strLabwareIDCarrier = ARW_Global::CarrierType::PLT_TIP1000;
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, t_seqTips1000, t_strTipCounterNameTip1000, 9999);
        t_intMaxSeqTips1000AfterEdit = t_seqTips1000.GetCount();
        DATA_TipCounterWrite(ML_STAR);
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
          	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
        }
        _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          {
            loopCounter1 = 0;
            while (1 == 1)
            {
              loopCounter1 = loopCounter1 + 1;
              onerror goto errLabel_8 ;
              err.Clear();
              ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              break;
              errLabel_8 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              }   /* end if from skip handler if no error */
            }
          }
        }
      }
      t_blnInsuffientTips = ASWGLOBAL::BOOL::FALSE;
    }
    DATA_TipCounterWrite(ML_STAR);
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  private function _Abstract(  ) void {
    MECC::TraceComment(Translate("\n***************************** NGS STAR Loading smt **************************\nAuthor: Enrique Bayo ebayo@hamilton.ch\nDate: 06Nov2020\n\nversion 3.2.4\n\nfor more information check version history within .smt\n\n*************************************************************************************"));
  }

  function Calculate_ReformatSequenceToMatchNumberOfSamples( device & ML_STAR, variable i_int_StartingPoint, sequence i_seq_Template, variable i_int_NumberOfSamples, sequence & o_seqCreated ) void {
    private variable l_int_NumberOfChannelsInstalled;
    private variable l_intNumberOfPositionIDs;
    private variable l_intPosID;
    private variable l_str_CarrierID;
    private variable l_str_FunctionName;
    private variable l_str_SiteIDs_long;
    private variable i_strStartingPoint;
    private variable l_int_NumberOfContainersNeeded;
    private variable l_str_LabwareIds_long;
    private variable l_str_SiteID;
    private variable l_strLabId;
    private variable l_str_PositionIds_long;
    private variable l_strLabwareId;
    private variable loopCounter3;
    private variable l_intTotalPositionSeqTemplate;
    private variable loopCounter4;
    private variable l_intPositionCounter;
    private variable l_strPositionId;
    private variable loopCounter6;
    private variable l_intStringFound;
    private variable l_int_currentPosition;
    private sequence l_seq_Template;
    private sequence l_seq_temp_Template;
    private sequence l_seq_Template_copy;
    private sequence l_seq_Template_singleRGTContainer;
    { sequence __temp; o_seqCreated = __temp; }
    l_str_FunctionName = Translate("");
    l_str_FunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
    {
      l_int_NumberOfChannelsInstalled = 8;
    }
    else
    {
      l_int_NumberOfChannelsInstalled = 4;
    }
    l_intNumberOfPositionIDs = SeqGetPositionCountForCurrLabware(i_seq_Template);
    l_int_NumberOfContainersNeeded = l_intNumberOfPositionIDs;
    MECC::TraceComment(Translate("----------------------- Define sequence"));
    if (i_int_StartingPoint == 0)
    {
      l_int_currentPosition = i_seq_Template.GetCurrentPosition();
      i_seq_Template.SetCurrentPosition(l_int_currentPosition);
    }
    else
    {
      i_seq_Template.SetCurrentPosition(i_int_StartingPoint);
    }
    SeqRemoveAll(l_seq_Template);
    l_str_LabwareIds_long = Translate("");
    l_str_PositionIds_long = Translate("");
    l_str_SiteIDs_long = Translate("");
    {
      for(loopCounter4 = 0; loopCounter4 < l_int_NumberOfContainersNeeded;)
      {
        loopCounter4 = loopCounter4 + 1;
        l_strLabwareId = SeqGetLabwareId(i_seq_Template);
        l_intStringFound = StrFind(l_strLabwareId, Translate("RGT"));
        l_strPositionId = SeqGetPositionId(i_seq_Template);
        if (l_intStringFound >= 0)
        {
          _ConvertValueToString(i_int_StartingPoint, i_strStartingPoint);
          l_intPosID = 0;
          {
            for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfChannelsInstalled;)
            {
              loopCounter3 = loopCounter3 + 1;
              if (l_int_NumberOfChannelsInstalled == 8)
              {
                l_intPosID = l_intPosID + 1;
              }
              if (l_int_NumberOfChannelsInstalled == 4)
              {
                l_intPosID = l_intPosID + 2;
              }
              _ConvertValueToString(l_intPosID, l_strPositionId);
              SeqAdd(l_seq_Template, l_strLabwareId, l_strPositionId);
              SeqAdd(l_seq_temp_Template, l_strLabwareId, l_strPositionId);
            }
          }
          _GetCarrierIDandSiteID_FromLabID(ML_STAR, l_strLabwareId, l_str_CarrierID, l_str_SiteID);
          if (loopCounter4 == l_int_NumberOfContainersNeeded)
          {
            l_str_SiteIDs_long = StrConcat12(l_str_SiteIDs_long, Translate(""), l_str_SiteID, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            l_str_LabwareIds_long = StrConcat12(l_str_LabwareIds_long, Translate(""), l_strLabwareId, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          }
          else
          {
            l_str_SiteIDs_long = StrConcat12(l_str_SiteIDs_long, Translate(""), l_str_SiteID, Translate(","), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            l_str_LabwareIds_long = StrConcat12(l_str_LabwareIds_long, Translate(""), l_strLabwareId, Translate(";"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          }
          l_str_PositionIds_long = l_str_SiteIDs_long;
          SeqCopySequence(l_seq_Template_singleRGTContainer, l_seq_temp_Template);
          l_seq_Template_singleRGTContainer.SetCurrentPosition(1);
          t_arr_seq_RGT_SequencesToAspirate.AddAsLast(l_seq_Template_singleRGTContainer);
          SeqRemoveAll(l_seq_Template_singleRGTContainer);
          SeqRemoveAll(l_seq_temp_Template);
        }
        else
        {
          SeqAdd(l_seq_Template, l_strLabwareId, l_strPositionId);
          _GetCarrierIDandSiteID_FromLabID(ML_STAR, l_strLabwareId, l_str_CarrierID, l_str_SiteID);
          if (loopCounter4 == l_int_NumberOfContainersNeeded)
          {
            l_str_PositionIds_long = StrConcat12(l_str_PositionIds_long, Translate(""), l_strPositionId, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            l_str_SiteIDs_long = StrConcat12(l_str_SiteIDs_long, Translate(""), l_str_SiteID, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            l_str_LabwareIds_long = StrConcat12(l_str_LabwareIds_long, Translate(""), l_strLabwareId, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          }
          else
          {
            l_str_PositionIds_long = StrConcat12(l_str_PositionIds_long, Translate(""), l_strPositionId, Translate(","), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            l_str_SiteIDs_long = StrConcat12(l_str_SiteIDs_long, Translate(""), l_str_SiteID, Translate(";"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            l_str_LabwareIds_long = StrConcat12(l_str_LabwareIds_long, Translate(""), l_strLabwareId, Translate(";"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          }
        }
        SeqIncrement(i_seq_Template, 1);
      }
    }
    l_seq_Template.SetCurrentPosition(1);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_str_CarrierID: "), l_str_CarrierID);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_str_SiteIDs_long: "), l_str_SiteIDs_long);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_str_PositionIds_long: "), l_str_PositionIds_long);
    SeqCopySequence(l_seq_Template_copy, l_seq_Template);
    SeqRemoveAll(l_seq_Template_copy);
    l_seq_Template.SetCurrentPosition(1);
    l_intTotalPositionSeqTemplate = SeqGetTotal(l_seq_Template);
    l_intPositionCounter = 0;
    {
      for(loopCounter6 = 0; loopCounter6 < i_int_NumberOfSamples;)
      {
        loopCounter6 = loopCounter6 + 1;
        l_intPositionCounter = l_intPositionCounter + 1;
        l_strLabId = SeqGetLabwareId(l_seq_Template);
        l_strPositionId = SeqGetPositionId(l_seq_Template);
        SeqAdd(l_seq_Template_copy, l_strLabId, l_strPositionId);
        SeqIncrement(l_seq_Template, 1);
        if (l_intPositionCounter == l_intTotalPositionSeqTemplate)
        {
          l_intPositionCounter = 0;
          l_seq_Template.SetCurrentPosition(1);
        }
      }
    }
    SeqRemoveAll(l_seq_Template);
    SeqCopySequence(l_seq_Template, l_seq_Template_copy);
    l_seq_Template.SetCurrentPosition(1);
    o_seqCreated = HSLExtensions::Sequence::Copy(l_seq_Template, 1);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, o_seqCreated);
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
    return;
  }

  function Calculate_TotalVolumeAndSequenceToAspirate( device & ML_STAR, variable i_str_ReagentName, variable i_int_NumberOfSamples, variable i_str_LabwareTypeId, variable i_flt_MaximumContainerVolume, variable i_flt_DeadVolumeLabware, variable i_flt_DeadVolumeReagent, sequence & i_seq_Template, variable i_int_StartingPoint, variable i_int_MinimumNumberOfContainers, sequence & o_seqCreated_distinctPositions, sequence & o_seqCreated_AdjustedtoNumberOfSamples, variable & o_arr_flt_VolumePerContainer[] ) void {
    private variable loopCounter7;
    private variable l_str_ErrorMessage;
    private variable l_flt_DeadVolumeReagent;
    private variable l_int_NumberOfChannelsInstalled;
    private variable loopCounter8;
    private variable l_str_ReagentName_Units_LabwareType_Volume;
    private variable l_str_MastermixComponentType;
    private variable l_int_ReturnSearch_ReagentName;
    private variable l_flt_TotalVolumePerContainer;
    private variable l_int_NumberOfSamplesPerContainerPlusExtraSample;
    private variable l_intPosID;
    private variable l_str_ColumnReference;
    private variable l_str_TotalVolumeNeeded_ForThisComponent;
    private variable l_str_CarrierID;
    private variable l_flt_TotalVolumeNeeded;
    private variable l_int_NumberOfSamplesPerContainer;
    private variable l_int_RemainingNumberOfContainers;
    private variable l_flt_VolumePerSampleForThisReagent;
    private variable l_flt_TotalVolumeForThisReagent;
    private variable l_flt_VolumePerSampleIncludingDeadVolume;
    private variable l_str_FunctionName;
    private variable i_strStartingPoint;
    private variable l_str_SiteIDs_long;
    private variable l_int_RemainingNumberOfSamples;
    private variable l_flt_VolumePerSample;
    private variable l_str_LabwareIds_long;
    private variable l_int_NumberOfContainersNeeded;
    private variable l_flt_MaximumContainerVolume;
    private variable l_str_CurrentReagentType;
    private variable l_str_ReagentName_Volume;
    private variable l_strLabId;
    private variable l_str_SiteID;
    private variable l_flt_CurrentReagentVolume;
    private variable l_str_VolumeAndUnits_long;
    private variable loopCounter1;
    private variable l_str_PositionIds_long;
    private variable l_str_SQLSentence;
    private variable l_str_CurrentReagentName;
    private variable loopCounter2;
    private variable l_strLabwareId;
    private variable loopCounter3;
    private variable l_intTotalPositionSeqTemplate;
    private variable loopCounter4;
    private variable l_flt_TotalVolumeNeeded_ForThisComponent;
    private variable l_intPositionCounter;
    private variable l_str_VolumeAndUnits;
    private variable l_bln_UpdateRecordsInFile;
    private variable loopCounter5;
    private variable l_int_NumberOfElements;
    private variable l_MaximumContainerVolumeExcludingDeadVolume;
    private variable l_strPositionId;
    private variable loopCounter6;
    private variable l_flt_Ratio_ForThisComponent;
    private variable l_intStringFound;
    private variable l_int_currentPosition;
    private variable l_int_RecordCount;
    private variable l_int_MaximumNumberSamplesPerContainer;
    private variable l_flt_TotalVolumeRequired;
    private sequence l_seq_Template;
    private sequence l_seq_temp_Template;
    private sequence l_seq_Template_singleRGTContainer;
    private sequence l_seq_Template_copy;
    private variable l_arr_ReagentNames_ForThisLiquid[];
    private variable l_arr_ReagentTypes_ForThisLiquid[];
    private variable l_arr_ReagentVolumes_ForThisLiquid[];
    private variable l_int_NumberOfMasterMixComponent;
    private variable loopCounter10;
    private variable l_bln_DefineSequence;
    private variable loopCounter11;
    private variable l_arr_MMComponentNames_ForThisLiquid[];
    private variable l_bln_IsMasterMixComponent;
    private variable loopCounter12;
    private variable l_flt_TotalVolumeForThisMastermixComponent;
    private variable l_MaximumContainerVolumeIncludingDeadVolume;
    private variable l_bln_repeatLoop;
    private variable loopCounter13;
    private variable l_int_LastNumberOfContainersNeeded;
    private variable loopCounter14;
    private variable l_str_PositionIds_forFile;
    private variable l_int_LengthString;
    private variable l_str_NoVolumes;
    private variable l_int_PositionFirstBracket;
    private variable l_str_SQLSentence1;
    private variable l_str_Volumes_forFile;
    private variable l_fltVolume;
    private variable l_strVolume;
    private variable l_str_LabIds_forFile;
    private variable t_arr_str_MasterMixTubeLabwareIDs[];
    private variable l_bln_IsMasterMix;
    private variable l_bln_IsReagent;
    private variable l_str_MessageForStatusWindows;
    private variable l_flt_reduceVolumeFraction;
    { sequence __temp; o_seqCreated_distinctPositions = __temp; }
    { sequence __temp; o_seqCreated_AdjustedtoNumberOfSamples = __temp; }
    o_arr_flt_VolumePerContainer.SetSize( 0);
    l_str_FunctionName = Translate("");
    l_str_FunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    o_arr_flt_VolumePerContainer.SetSize(0);
    _Reset_FileRunData_Variables();
    if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
    {
      l_int_NumberOfChannelsInstalled = 8;
    }
    else
    {
      l_int_NumberOfChannelsInstalled = 4;
    }
    l_flt_TotalVolumeRequired = 0.0;
    l_bln_IsMasterMix = ASWGLOBAL::BOOL::FALSE;
    l_bln_IsReagent = ASWGLOBAL::BOOL::FALSE;
    if (i_int_NumberOfSamples <= i_int_MinimumNumberOfContainers)
    {
      i_int_MinimumNumberOfContainers = i_int_NumberOfSamples;
    }
    l_str_SQLSentence = Translate("");
    l_int_RecordCount = 0;
    l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_ReagentName] = '",i_str_ReagentName,"'","","","","","","","","","");
    Trace(l_str_SQLSentence);
    file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
    file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
    file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
    file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
    file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
    file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
    file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
    file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
    file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
    file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
    file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
    file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
    file_RunData.AddField("DB_PrepareMastermixOnDeck", file_RunData_DB_PrepareMastermixOnDeck, hslInteger);
    file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
    if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, l_str_SQLSentence) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
    }
    {
      loopCounter7 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter7 = loopCounter7 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_int_RecordCount = l_int_RecordCount + 1;
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    if (l_int_RecordCount == 0)
    {
      MECC::TraceComment(Translate("Mastermix Component? (mastermix components are being renamed as: \"NameOfTheComponent - NameOfTheMastermix\")\n"));
      l_str_SQLSentence = Translate("");
      l_int_RecordCount = 0;
      l_bln_IsMasterMixComponent = ASWGLOBAL::BOOL::FALSE;
      l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_MasterMixComponentName] = '",i_str_ReagentName,"' AND [DB_ReagentType] = 'MastermixComponent'","","","","","","","","","");
      Trace(l_str_SQLSentence);
      file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
      file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
      file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
      file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
      file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
      file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
      file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
      file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
      file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
      file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
      file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
      file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
      file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
      file_RunData.AddField("DB_PrepareMastermixOnDeck", file_RunData_DB_PrepareMastermixOnDeck, hslInteger);
      file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, l_str_SQLSentence) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
      {
        loopCounter7 = 0;
        while (
           (file_RunData.Eof() == 0)
        )
        {
          loopCounter7 = loopCounter7 + 1;
          if( 0 == file_RunData.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_int_RecordCount = l_int_RecordCount + 1;
          l_bln_IsMasterMixComponent = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
      if (l_bln_IsMasterMixComponent == ASWGLOBAL::BOOL::TRUE)
      {
        l_str_SQLSentence1 = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_ReagentName] = '",t_str_LastMastermixName,"'","","","","","","","","","");
        Trace(l_str_SQLSentence);
        file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
        file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
        if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, l_str_SQLSentence1) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
        }
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_int_PositionFirstBracket = StrFind(file_RunData_DB_ReagentNameANDLabwareType, Translate("["));
        l_int_LengthString = StrGetLength(file_RunData_DB_ReagentNameANDLabwareType);
        l_str_NoVolumes = StrLeft(file_RunData_DB_ReagentNameANDLabwareType, l_int_PositionFirstBracket);
        if( 0 != file_RunData.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file_RunData.RemoveFields();
        if (file_RunData_DB_TotalVolume != 0)
        {
          l_str_SQLSentence = StrConcat12("UPDATE [RunData$] SET [DB_TotalVolume] = 0, [DB_ReagentNameANDLabwareType] = '",l_str_NoVolumes,"' WHERE [DB_ReagentName] = '",t_str_LastMastermixName,"'","","","","","","","");
          Trace(l_str_SQLSentence);
          file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
          file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
          if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, l_str_SQLSentence) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
          }
          if( 0 != file_RunData.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          file_RunData.RemoveFields();
        }
      }
      else
      {
        l_bln_IsMasterMix = ASWGLOBAL::BOOL::TRUE;
        l_bln_IsReagent = ASWGLOBAL::BOOL::TRUE;
      }
    }
    if (l_int_RecordCount == 0)
    {
      l_str_ErrorMessage = StrConcat12(Translate("xxxxxxxxxxxxxxxxxxxxxx  Reagent: "), i_str_ReagentName, Translate(" DOES NOT EXIST"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(""), l_str_ErrorMessage);
    }
    else
    {
      MECC::TraceComment(Translate("INPUT PARAMETERS"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_str_ReagentName: "), i_str_ReagentName);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_str_LabwareTypeId: "), i_str_LabwareTypeId);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_flt_DeadVolumeLabware: "), i_flt_DeadVolumeLabware);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_flt_DeadVolumeReagent: "), i_flt_DeadVolumeReagent);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_flt_MaximumContainerVolume: "), i_flt_MaximumContainerVolume);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_int_NumberOfSamples: "), i_int_NumberOfSamples);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_int_MinimumNumberOfContainers: "), i_int_MinimumNumberOfContainers);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- i_int_StartingPoint: "), i_int_StartingPoint);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_int_NumberOfChannelsInstalled: "), l_int_NumberOfChannelsInstalled);
      if (file_RunData_DB_VolumePerWell != 0)
      {
        l_bln_DefineSequence = ASWGLOBAL::BOOL::TRUE;
        if (l_bln_IsMasterMixComponent == ASWGLOBAL::BOOL::FALSE)
        {
          file_MM_Preparation.AddField("Mastermix_ID", file_MM_Preparation_Mastermix_ID, hslString, 255);
          file_MM_Preparation.AddField("Component_ID", file_MM_Preparation_Component_ID, hslString, 255);
          file_MM_Preparation.AddField("Ratio", file_MM_Preparation_Ratio, hslFloat);
          file_MM_Preparation.AddField("MastermixTube_ID", file_MM_Preparation_MastermixTube_ID, hslString, 255);
          file_MM_Preparation.AddField("MastermixTube_LabwareID", file_MM_Preparation_MastermixTube_LabwareID, hslString, 255);
          file_MM_Preparation.AddField("VolumeMastermixPerTube", file_MM_Preparation_VolumeMastermixPerTube, hslFloat);
          file_MM_Preparation.AddField("VolumeComponentPerTube", file_MM_Preparation_VolumeComponentPerTube, hslFloat);
          file_MM_Preparation.AddField("SourceComponentTube_ID", file_MM_Preparation_SourceComponentTube_ID, hslString, 255);
          file_MM_Preparation.AddField("SourceComponentTube_LabwareID", file_MM_Preparation_SourceComponentTube_LabwareID, hslString, 255);
          file_MM_Preparation.AddField("SourceVolumeComponentPerTube", file_MM_Preparation_SourceVolumeComponentPerTube, hslString, 255);
          if( 0 == file_MM_Preparation.Open(t_str_FullpathFile_RunData + " " + "Mastermix_Prep$", hslAppend) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
          }
        }
        TrcTrace(Translate(" ----------- Calculations -----------"), Translate(""));
        l_arr_ReagentNames_ForThisLiquid.SetSize(0);
        l_arr_MMComponentNames_ForThisLiquid.SetSize(0);
        l_arr_ReagentVolumes_ForThisLiquid.SetSize(0);
        l_arr_ReagentTypes_ForThisLiquid.SetSize(0);
        t_arr_str_MasterMixComponentIDs.SetSize(0);
        l_arr_ReagentNames_ForThisLiquid.AddAsLast(i_str_ReagentName);
        l_arr_ReagentTypes_ForThisLiquid.AddAsLast(file_RunData_DB_ReagentType);
        l_arr_ReagentVolumes_ForThisLiquid.AddAsLast(file_RunData_DB_VolumePerWell);
        l_flt_VolumePerSampleForThisReagent = file_RunData_DB_VolumePerWell;
        l_int_NumberOfElements = 1;
        if (file_RunData_DB_ReagentType == ARW_Global::ReagentType::Mastermix)
        {
          l_bln_IsMasterMix = ASWGLOBAL::BOOL::TRUE;
          l_bln_IsReagent = ASWGLOBAL::BOOL::FALSE;
          l_int_NumberOfMasterMixComponent = 0;
          l_str_SQLSentence = Translate("");
          l_str_MastermixComponentType = ARW_Global::ReagentType::MastermixComponent;
          file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
          file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
          file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
          file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
          file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
          file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
          file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
          file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
          file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
          file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
          file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
          file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
          file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
          file_RunData.AddField("DB_PrepareMastermixOnDeck", file_RunData_DB_PrepareMastermixOnDeck, hslInteger);
          file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
          if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
          }
          {
            loopCounter7 = 0;
            while (
               (file_RunData.Eof() == 0)
            )
            {
              loopCounter7 = loopCounter7 + 1;
              if( 0 == file_RunData.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              l_int_ReturnSearch_ReagentName = StrFind(file_RunData_DB_ReagentName, i_str_ReagentName);
              if (l_int_ReturnSearch_ReagentName >= 0)
              {
                if (file_RunData_DB_ReagentType == l_str_MastermixComponentType)
                {
                  t_arr_str_MasterMixComponentIDs.AddAsLast(file_RunData_DB_MasterMixComponentName);
                  l_arr_ReagentNames_ForThisLiquid.AddAsLast(file_RunData_DB_ReagentName);
                  l_arr_ReagentVolumes_ForThisLiquid.AddAsLast(file_RunData_DB_VolumePerWell);
                  l_arr_ReagentTypes_ForThisLiquid.AddAsLast(file_RunData_DB_ReagentType);
                  l_int_NumberOfElements = l_int_NumberOfElements + 1;
                  l_int_NumberOfMasterMixComponent = l_int_NumberOfMasterMixComponent + 1;
                }
              }
            }
          }
          if( 0 != file_RunData.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          file_RunData.RemoveFields();
          Util2::Debug::TraceArray_3(Translate(""), l_arr_ReagentNames_ForThisLiquid, l_arr_ReagentTypes_ForThisLiquid, l_arr_ReagentVolumes_ForThisLiquid);
        }
        else
        {
          l_bln_IsMasterMix = ASWGLOBAL::BOOL::FALSE;
          l_bln_IsReagent = ASWGLOBAL::BOOL::TRUE;
        }
        l_bln_UpdateRecordsInFile = ASWGLOBAL::BOOL::TRUE;
        t_arr_flt_VolumePerContainer.SetSize(0);
        t_arr_flt_RatioForComponets.SetSize(0);
        t_arr_str_MasterMixTubeIDs.SetSize(0);
        t_arr_str_MasterMixTubeLabwareIDs.SetSize(0);
        file_MM_Preparation_Mastermix_ID = l_arr_ReagentNames_ForThisLiquid.ElementAt( 1 -1);
        {
          loopCounter5 = 0;
          while (1 == 1)
          {
            loopCounter5 = loopCounter5 + 1;
            l_str_CurrentReagentName=l_arr_ReagentNames_ForThisLiquid.GetAt(loopCounter5-1);
            l_str_CurrentReagentType=l_arr_ReagentTypes_ForThisLiquid.GetAt(loopCounter5-1);
            l_flt_CurrentReagentVolume=l_arr_ReagentVolumes_ForThisLiquid.GetAt(loopCounter5-1);
            if (l_str_CurrentReagentType == ARW_Global::ReagentType::MastermixComponent)
            {
              l_bln_DefineSequence = ASWGLOBAL::BOOL::FALSE;
            }
            l_flt_DeadVolumeReagent = 0;
            l_flt_DeadVolumeReagent = (i_flt_DeadVolumeReagent / 100.0) + 1.0;
            if (l_bln_IsMasterMixComponent == ASWGLOBAL::BOOL::FALSE)
            {
              if (l_str_CurrentReagentType == ARW_Global::ReagentType::MastermixComponent)
              {
                l_flt_VolumePerSample = l_flt_CurrentReagentVolume;
                Calculate_TotalVolume_MastermixComponent(i_str_ReagentName, l_str_CurrentReagentName, l_flt_VolumePerSampleForThisReagent, l_flt_TotalVolumeForThisReagent, l_flt_CurrentReagentVolume, l_flt_TotalVolumeNeeded_ForThisComponent, l_flt_Ratio_ForThisComponent);
                t_arr_flt_RatioForComponets.AddAsLast(l_flt_Ratio_ForThisComponent);
                l_flt_Ratio_ForThisComponent = MthRound(l_flt_Ratio_ForThisComponent, 2);
                _GenerateString(l_flt_TotalVolumeNeeded_ForThisComponent, l_str_TotalVolumeNeeded_ForThisComponent);
                l_str_ReagentName_Volume = StrConcat12(l_str_CurrentReagentName, Translate(""), Translate("-->"), Translate("["), l_str_TotalVolumeNeeded_ForThisComponent, Translate("]"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_TotalVolume"), l_flt_TotalVolumeNeeded_ForThisComponent, Translate("DB_ReagentName"), l_str_CurrentReagentName);
                _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_ReagentNameANDLabwareType"), l_str_ReagentName_Volume, Translate("DB_ReagentName"), l_str_CurrentReagentName);
                _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_Ratio"), l_flt_Ratio_ForThisComponent, Translate("DB_ReagentName"), l_str_CurrentReagentName);
                l_bln_UpdateRecordsInFile = ASWGLOBAL::BOOL::FALSE;
                l_flt_TotalVolumeNeeded = l_flt_TotalVolumeNeeded_ForThisComponent;
              }
              else
              {
                t_str_LastMastermixName = i_str_ReagentName;
                l_flt_VolumePerSample = l_flt_CurrentReagentVolume;
                l_flt_TotalVolumeNeeded = i_int_NumberOfSamples * l_flt_VolumePerSample;
                l_bln_UpdateRecordsInFile = ASWGLOBAL::BOOL::TRUE;
              }
              l_flt_TotalVolumeNeeded = l_flt_TotalVolumeNeeded * l_flt_DeadVolumeReagent;
            }
            else
            {
              l_flt_TotalVolumeForThisMastermixComponent = 0.0;
              TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-------------- Calculate Total Volume and Sequence To Aspirate for Mastermix Component: "), l_str_CurrentReagentName);
              l_str_SQLSentence = StrConcat12("SELECT * FROM [Mastermix_Prep$] WHERE [Component_ID] = '",i_str_ReagentName,"'","","","","","","","","","");
              Trace(l_str_SQLSentence);
              file_MM_Preparation.AddField("Mastermix_ID", file_MM_Preparation_Mastermix_ID, hslString, 255);
              file_MM_Preparation.AddField("Component_ID", file_MM_Preparation_Component_ID, hslString, 255);
              file_MM_Preparation.AddField("Ratio", file_MM_Preparation_Ratio, hslFloat);
              file_MM_Preparation.AddField("MastermixTube_ID", file_MM_Preparation_MastermixTube_ID, hslString, 255);
              file_MM_Preparation.AddField("VolumeMastermixPerTube", file_MM_Preparation_VolumeMastermixPerTube, hslFloat);
              file_MM_Preparation.AddField("VolumeComponentPerTube", file_MM_Preparation_VolumeComponentPerTube, hslFloat);
              if( 0 == file_MM_Preparation.Open(t_str_FullpathFile_RunData + " " + "Mastermix_Prep$", hslRead, l_str_SQLSentence) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
              }
              {
                loopCounter12 = 0;
                while (
                   (file_MM_Preparation.Eof() == 0)
                )
                {
                  loopCounter12 = loopCounter12 + 1;
                  if( 0 == file_MM_Preparation.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  l_flt_TotalVolumeForThisMastermixComponent = l_flt_TotalVolumeForThisMastermixComponent + file_MM_Preparation_VolumeComponentPerTube;
                }
              }
              l_flt_TotalVolumeNeeded = l_flt_TotalVolumeForThisMastermixComponent;
              l_flt_VolumePerSample = l_flt_CurrentReagentVolume;
              if( 0 != file_MM_Preparation.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              file_MM_Preparation.RemoveFields();
            }
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_flt_TotalVolumeNeeded (Excluding Dead Volume Labware): "), l_flt_TotalVolumeNeeded);
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_flt_VolumePerSample: "), l_flt_VolumePerSample);
            if (i_int_MinimumNumberOfContainers == 0)
            {
              i_int_MinimumNumberOfContainers = 1;
            }
            l_flt_MaximumContainerVolume = i_flt_MaximumContainerVolume;
            l_flt_reduceVolumeFraction = 0;
            {
              loopCounter8 = 0;
              while (l_int_NumberOfContainersNeeded < i_int_MinimumNumberOfContainers)
              {
                loopCounter8 = loopCounter8 + 1;
                if(0){
                  l_str_ReagentName_Units_LabwareType_Volume = Translate("");
                }
                if (l_bln_IsMasterMixComponent == ASWGLOBAL::BOOL::FALSE)
                {
                  l_MaximumContainerVolumeExcludingDeadVolume = l_flt_MaximumContainerVolume - i_flt_DeadVolumeLabware;
                  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_MaximumContainerVolumeExcludingDeadVolume: "), l_MaximumContainerVolumeExcludingDeadVolume);
                  l_int_NumberOfContainersNeeded = l_flt_TotalVolumeNeeded / (l_MaximumContainerVolumeExcludingDeadVolume * 1.0);
                  l_int_NumberOfContainersNeeded = MthCeiling(l_int_NumberOfContainersNeeded);
                  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_int_NumberOfContainersNeeded: "), l_int_NumberOfContainersNeeded);
                  l_flt_VolumePerSampleIncludingDeadVolume = l_flt_VolumePerSample * l_flt_DeadVolumeReagent;
                  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_flt_VolumePerSampleIncludingDeadVolume: "), l_flt_VolumePerSampleIncludingDeadVolume);
                  l_int_MaximumNumberSamplesPerContainer = l_MaximumContainerVolumeExcludingDeadVolume / (l_flt_VolumePerSampleIncludingDeadVolume * 1.0);
                  l_int_MaximumNumberSamplesPerContainer = MthFloor(l_int_MaximumNumberSamplesPerContainer);
                  if (l_int_MaximumNumberSamplesPerContainer == 0)
                  {
                    MECC::TraceComment(Translate("There is no way to recalculate the volume based on the maximum number of samples per container so split the total volume required equally among all containers calculated in first instance"));
                  }
                  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_int_MaximumNumberSamplesPerContainer: "), l_int_MaximumNumberSamplesPerContainer);
                  if (l_int_MaximumNumberSamplesPerContainer == 0)
                  {
                    l_flt_TotalVolumePerContainer = 0.0;
                    l_flt_TotalVolumeRequired = 0.0;
                    l_str_VolumeAndUnits = Translate("");
                    l_str_VolumeAndUnits_long = Translate("");
                    l_flt_TotalVolumePerContainer = l_flt_TotalVolumeNeeded / (l_int_NumberOfContainersNeeded * 1.0);
                    {
                      for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfContainersNeeded;)
                      {
                        loopCounter2 = loopCounter2 + 1;
                        if (loopCounter5 == 1)
                        {
                        o_arr_flt_VolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
                        }
                        t_arr_flt_VolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
                        _GenerateString(l_flt_TotalVolumePerContainer, l_str_VolumeAndUnits);
                        l_strLabwareId = SeqGetLabwareId(i_seq_Template);
                        l_intStringFound = StrFind(l_strLabwareId, Translate("RGT"));
                        if (l_intStringFound >= 0)
                        {
                        t_arr_flt_RGT_TotalVolume.AddAsLast(l_flt_TotalVolumePerContainer);
                        t_arr_str_RGT_ReagentName.AddAsLast(l_str_CurrentReagentName);
                        }
                        l_str_VolumeAndUnits_long = StrConcat12(l_str_VolumeAndUnits_long, Translate(" ["), l_str_VolumeAndUnits, Translate("]"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                      }
                    }
                    l_flt_TotalVolumeRequired = l_flt_TotalVolumeNeeded;
                    l_str_ReagentName_Units_LabwareType_Volume = StrConcat12(l_str_ReagentName_Units_LabwareType_Volume, i_str_ReagentName, Translate("-->"), l_int_NumberOfContainersNeeded, Translate(" x "), i_str_LabwareTypeId, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    l_str_ReagentName_Units_LabwareType_Volume = StrConcat12(l_str_ReagentName_Units_LabwareType_Volume, l_str_VolumeAndUnits_long, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_flt_TotalVolumeRequired: "), l_flt_TotalVolumeRequired);
                    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_int_NumberOfContainersNeeded: "), l_int_NumberOfContainersNeeded);
                    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_str_ReagentName_Units_LabwareType_Volume: "), l_str_ReagentName_Units_LabwareType_Volume);
                  }
                  else
                  {
                    l_int_NumberOfContainersNeeded = i_int_NumberOfSamples / (l_int_MaximumNumberSamplesPerContainer * 1.0);
                    l_int_NumberOfContainersNeeded = MthCeiling(l_int_NumberOfContainersNeeded);
                    TrcTrace(Translate("-------------- Recalculation = l_int_NumberOfContainersNeeded: "), l_int_NumberOfContainersNeeded);
                    l_flt_TotalVolumePerContainer = 0.0;
                    l_flt_TotalVolumeRequired = 0.0;
                    l_str_VolumeAndUnits = Translate("");
                    l_str_VolumeAndUnits_long = Translate("");
                    l_str_ReagentName_Units_LabwareType_Volume = Translate("");
                    l_int_NumberOfSamplesPerContainer = i_int_NumberOfSamples / (l_int_NumberOfContainersNeeded * 1.0);
                    l_int_NumberOfSamplesPerContainer = MthFloor(l_int_NumberOfSamplesPerContainer);
                    l_int_RemainingNumberOfSamples = i_int_NumberOfSamples % l_int_NumberOfContainersNeeded;
                    l_str_ReagentName_Units_LabwareType_Volume = StrConcat12(l_str_ReagentName_Units_LabwareType_Volume, i_str_ReagentName, Translate("-->"), l_int_NumberOfContainersNeeded, Translate(" x "), i_str_LabwareTypeId, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    if (l_int_RemainingNumberOfSamples != 0)
                    {
                      l_int_NumberOfSamplesPerContainerPlusExtraSample = l_int_NumberOfSamplesPerContainer + 1;
                      l_flt_TotalVolumePerContainer = ((l_int_NumberOfSamplesPerContainerPlusExtraSample * l_flt_VolumePerSample)* l_flt_DeadVolumeReagent) + i_flt_DeadVolumeLabware;
                      l_flt_TotalVolumePerContainer = MthRound(l_flt_TotalVolumePerContainer, 1);
                      l_int_RemainingNumberOfContainers = l_int_NumberOfContainersNeeded;
                      {
                        for(loopCounter2 = 0; loopCounter2 < l_int_RemainingNumberOfSamples;)
                        {
                        loopCounter2 = loopCounter2 + 1;
                        l_flt_TotalVolumeRequired = l_flt_TotalVolumeRequired + l_flt_TotalVolumePerContainer;
                        if (loopCounter5 == 1)
                        {
                        o_arr_flt_VolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
                        }
                        t_arr_flt_VolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
                        _GenerateString(l_flt_TotalVolumePerContainer, l_str_VolumeAndUnits);
                        l_strLabwareId = SeqGetLabwareId(i_seq_Template);
                        l_intStringFound = StrFind(l_strLabwareId, Translate("RGT"));
                        if (l_intStringFound >= 0)
                        {
                        t_arr_flt_RGT_TotalVolume.AddAsLast(l_flt_TotalVolumePerContainer);
                        t_arr_str_RGT_ReagentName.AddAsLast(l_str_CurrentReagentName);
                        }
                        l_str_VolumeAndUnits_long = StrConcat12(l_str_VolumeAndUnits_long, Translate(" ["), l_str_VolumeAndUnits, Translate("]"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                        l_int_RemainingNumberOfContainers = l_int_RemainingNumberOfContainers - 1;
                        }
                      }
                      l_flt_TotalVolumePerContainer = ((l_int_NumberOfSamplesPerContainer * l_flt_VolumePerSample)* l_flt_DeadVolumeReagent) + i_flt_DeadVolumeLabware;
                      l_flt_TotalVolumePerContainer = MthRound(l_flt_TotalVolumePerContainer, 1);
                      {
                        for(loopCounter1 = 0; loopCounter1 < l_int_RemainingNumberOfContainers;)
                        {
                        loopCounter1 = loopCounter1 + 1;
                        l_flt_TotalVolumeRequired = l_flt_TotalVolumeRequired + l_flt_TotalVolumePerContainer;
                        if (loopCounter5 == 1)
                        {
                        o_arr_flt_VolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
                        }
                        t_arr_flt_VolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
                        _GenerateString(l_flt_TotalVolumePerContainer, l_str_VolumeAndUnits);
                        l_strLabwareId = SeqGetLabwareId(i_seq_Template);
                        l_intStringFound = StrFind(l_strLabwareId, Translate("RGT"));
                        if (l_intStringFound >= 0)
                        {
                        t_arr_flt_RGT_TotalVolume.AddAsLast(l_flt_TotalVolumePerContainer);
                        t_arr_str_RGT_ReagentName.AddAsLast(l_str_CurrentReagentName);
                        }
                        l_str_VolumeAndUnits_long = StrConcat12(l_str_VolumeAndUnits_long, Translate(" ["), l_str_VolumeAndUnits, Translate("]"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                        }
                      }
                    }
                    else
                    {
                      l_flt_TotalVolumePerContainer = ((l_int_NumberOfSamplesPerContainer * l_flt_VolumePerSample)* l_flt_DeadVolumeReagent) + i_flt_DeadVolumeLabware;
                      l_flt_TotalVolumePerContainer = MthRound(l_flt_TotalVolumePerContainer, 1);
                      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_flt_TotalVolumePerContainer: "), l_flt_TotalVolumePerContainer);
                      {
                        for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfContainersNeeded;)
                        {
                        loopCounter1 = loopCounter1 + 1;
                        l_flt_TotalVolumeRequired = l_flt_TotalVolumeRequired + l_flt_TotalVolumePerContainer;
                        if (loopCounter5 == 1)
                        {
                        o_arr_flt_VolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
                        }
                        t_arr_flt_VolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
                        _GenerateString(l_flt_TotalVolumePerContainer, l_str_VolumeAndUnits);
                        l_strLabwareId = SeqGetLabwareId(i_seq_Template);
                        l_intStringFound = StrFind(l_strLabwareId, Translate("RGT"));
                        if (l_intStringFound >= 0)
                        {
                        t_arr_flt_RGT_TotalVolume.AddAsLast(l_flt_TotalVolumePerContainer);
                        t_arr_str_RGT_ReagentName.AddAsLast(l_str_CurrentReagentName);
                        }
                        l_str_VolumeAndUnits_long = StrConcat12(l_str_VolumeAndUnits_long, Translate(" ["), l_str_VolumeAndUnits, Translate("]"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                        }
                      }
                    }
                    l_str_ReagentName_Units_LabwareType_Volume = StrConcat12(l_str_ReagentName_Units_LabwareType_Volume, l_str_VolumeAndUnits_long, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_flt_TotalVolumeRequired: "), l_flt_TotalVolumeRequired);
                    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_int_NumberOfContainersNeeded: "), l_int_NumberOfContainersNeeded);
                    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_str_ReagentName_Units_LabwareType_Volume: "), l_str_ReagentName_Units_LabwareType_Volume);
                    MECC::TraceComment(Translate("-------------------------------------------------------------------------------------------------------------------------"));
                    if (i_int_MinimumNumberOfContainers > 0)
                    {
                      if (l_int_NumberOfContainersNeeded < i_int_MinimumNumberOfContainers)
                      {
                        l_flt_reduceVolumeFraction = l_flt_TotalVolumePerContainer - 0.1;
                        l_flt_MaximumContainerVolume = l_flt_reduceVolumeFraction;
                      }
                      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_flt_MaximumContainerVolume: "), l_flt_MaximumContainerVolume);
                    }
                    else
                    {
                      break;
                    }
                    if (loopCounter8 == 200)
                    {
                      l_str_ErrorMessage = StrConcat12("Cannot define ",i_int_MinimumNumberOfContainers," containers for this reagent: '",i_str_ReagentName,"'.","\n","Review settings in method.","","","","","");
                      Display_Error_Dialog(l_str_ErrorMessage);
                      break;
                    }
                  }
                }
                else
                {
                  MECC::TraceComment(Translate("This calculation applies only when calculating number of containers needed for Mastermix component"));
                  l_str_VolumeAndUnits = Translate("");
                  l_str_VolumeAndUnits_long = Translate("");
                  l_bln_repeatLoop = ASWGLOBAL::BOOL::TRUE;
                  {
                    loopCounter13 = 0;
                    while (l_bln_repeatLoop == ASWGLOBAL::BOOL::TRUE)
                    {
                      loopCounter13 = loopCounter13 + 1;
                      l_MaximumContainerVolumeIncludingDeadVolume = l_flt_MaximumContainerVolume - i_flt_DeadVolumeLabware;
                      if(0){
                        l_MaximumContainerVolumeIncludingDeadVolume = l_MaximumContainerVolumeExcludingDeadVolume * l_flt_DeadVolumeReagent;
                      }
                      l_int_NumberOfContainersNeeded = l_flt_TotalVolumeNeeded / (l_MaximumContainerVolumeIncludingDeadVolume * 1.0);
                      l_int_NumberOfContainersNeeded = MthCeiling(l_int_NumberOfContainersNeeded);
                      l_int_LastNumberOfContainersNeeded = l_int_NumberOfContainersNeeded;
                      l_flt_TotalVolumeNeeded = (l_flt_TotalVolumeNeeded + (l_int_NumberOfContainersNeeded * i_flt_DeadVolumeLabware))* l_flt_DeadVolumeReagent;
                      l_int_NumberOfContainersNeeded = l_flt_TotalVolumeNeeded / (l_MaximumContainerVolumeIncludingDeadVolume * 1.0);
                      l_int_NumberOfContainersNeeded = MthCeiling(l_int_NumberOfContainersNeeded);
                      if (l_int_NumberOfContainersNeeded < i_int_MinimumNumberOfContainers)
                      {
                        l_flt_MaximumContainerVolume = l_flt_MaximumContainerVolume - l_flt_reduceVolumeFraction;
                        if (l_flt_MaximumContainerVolume <= 100)
                        {
                        l_str_MessageForStatusWindows = StrConcat12(Translate("Attention: Cannot distribute volume in "), i_int_MinimumNumberOfContainers, Translate(" as requested by programmer"), Translate("/nInstead of, "), l_int_NumberOfContainersNeeded, Translate(" wells will be used"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                        l_bln_repeatLoop = ASWGLOBAL::BOOL::FALSE;
                        break;
                        }
                        else
                        {
                        l_bln_repeatLoop = ASWGLOBAL::BOOL::TRUE;
                        }
                      }
                      else
                      {
                        l_flt_TotalVolumeRequired = l_flt_TotalVolumeNeeded;
                        l_flt_TotalVolumePerContainer = l_flt_TotalVolumeRequired / (l_int_NumberOfContainersNeeded * 1.0);
                        file_MM_Preparation_SourceVolumeComponentPerTube = l_flt_TotalVolumePerContainer;
                        {
                        for(loopCounter14 = 0; loopCounter14 < l_int_NumberOfContainersNeeded;)
                        {
                        loopCounter14 = loopCounter14 + 1;
                        o_arr_flt_VolumePerContainer.AddAsLast(l_flt_TotalVolumePerContainer);
                        }
                        }
                        _GenerateString(l_flt_TotalVolumePerContainer, l_str_VolumeAndUnits);
                        l_str_VolumeAndUnits_long = StrConcat12(Translate(""), i_str_ReagentName, Translate("-->"), l_int_NumberOfContainersNeeded, Translate(" x "), i_str_LabwareTypeId, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                        l_str_VolumeAndUnits_long = StrConcat12(l_str_VolumeAndUnits_long, Translate(" ["), l_str_VolumeAndUnits, Translate("] per Container"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                        l_str_ReagentName_Units_LabwareType_Volume = l_str_VolumeAndUnits_long;
                        l_bln_repeatLoop = ASWGLOBAL::BOOL::FALSE;
                        l_bln_UpdateRecordsInFile = ASWGLOBAL::BOOL::TRUE;
                        l_bln_DefineSequence = ASWGLOBAL::BOOL::TRUE;
                        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_flt_TotalVolumeRequired: "), l_flt_TotalVolumeRequired);
                        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_int_NumberOfContainersNeeded: "), l_int_NumberOfContainersNeeded);
                      }
                    }
                  }
                }
              }
            }
            if (l_bln_DefineSequence == ASWGLOBAL::BOOL::TRUE)
            {
              MECC::TraceComment(Translate("----------------------- Define sequence"));
              if (i_int_StartingPoint == 0)
              {
                l_int_currentPosition = i_seq_Template.GetCurrentPosition();
                i_seq_Template.SetCurrentPosition(l_int_currentPosition);
              }
              else
              {
                i_seq_Template.SetCurrentPosition(i_int_StartingPoint);
              }
              SeqRemoveAll(l_seq_Template);
              l_str_LabwareIds_long = Translate("");
              l_str_PositionIds_long = Translate("");
              {
                for(loopCounter4 = 0; loopCounter4 < l_int_NumberOfContainersNeeded;)
                {
                  loopCounter4 = loopCounter4 + 1;
                  l_strLabwareId = SeqGetLabwareId(i_seq_Template);
                  l_intStringFound = StrFind(l_strLabwareId, Translate("RGT"));
                  l_strPositionId = SeqGetPositionId(i_seq_Template);
                  if (l_intStringFound >= 0)
                  {
                    _ConvertValueToString(i_int_StartingPoint, i_strStartingPoint);
                    l_intPosID = 0;
                    {
                      for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfChannelsInstalled;)
                      {
                        loopCounter3 = loopCounter3 + 1;
                        if (l_int_NumberOfChannelsInstalled == 8)
                        {
                        l_intPosID = l_intPosID + 1;
                        }
                        if (l_int_NumberOfChannelsInstalled == 4)
                        {
                        l_intPosID = l_intPosID + 2;
                        }
                        _ConvertValueToString(l_intPosID, l_strPositionId);
                        SeqAdd(l_seq_Template, l_strLabwareId, l_strPositionId);
                        SeqAdd(l_seq_temp_Template, l_strLabwareId, l_strPositionId);
                      }
                    }
                    _GetCarrierIDandSiteID_FromLabID(ML_STAR, l_strLabwareId, l_str_CarrierID, l_str_SiteID);
                    if (loopCounter4 == l_int_NumberOfContainersNeeded)
                    {
                      l_str_SiteIDs_long = StrConcat12(l_str_SiteIDs_long, Translate(""), l_str_SiteID, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                      l_str_LabwareIds_long = StrConcat12(l_str_LabwareIds_long, Translate(""), l_strLabwareId, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    }
                    else
                    {
                      l_str_SiteIDs_long = StrConcat12(l_str_SiteIDs_long, Translate(""), l_str_SiteID, Translate(","), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                      l_str_LabwareIds_long = StrConcat12(l_str_LabwareIds_long, Translate(""), l_strLabwareId, Translate(";"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    }
                    l_str_PositionIds_long = l_str_SiteIDs_long;
                    SeqCopySequence(l_seq_Template_singleRGTContainer, l_seq_temp_Template);
                    l_seq_Template_singleRGTContainer.SetCurrentPosition(1);
                    t_arr_seq_RGT_SequencesToAspirate.AddAsLast(l_seq_Template_singleRGTContainer);
                    SeqRemoveAll(l_seq_Template_singleRGTContainer);
                    SeqRemoveAll(l_seq_temp_Template);
                  }
                  else
                  {
                    SeqAdd(l_seq_Template, l_strLabwareId, l_strPositionId);
                    _GetCarrierIDandSiteID_FromLabID(ML_STAR, l_strLabwareId, l_str_CarrierID, l_str_SiteID);
                    if (loopCounter4 == l_int_NumberOfContainersNeeded)
                    {
                      l_str_PositionIds_long = StrConcat12(l_str_PositionIds_long, Translate(""), l_strPositionId, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                      l_str_SiteIDs_long = StrConcat12(l_str_SiteIDs_long, Translate(""), l_str_SiteID, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                      l_str_LabwareIds_long = StrConcat12(l_str_LabwareIds_long, Translate(""), l_strLabwareId, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    }
                    else
                    {
                      l_str_PositionIds_long = StrConcat12(l_str_PositionIds_long, Translate(""), l_strPositionId, Translate(","), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                      l_str_SiteIDs_long = StrConcat12(l_str_SiteIDs_long, Translate(""), l_str_SiteID, Translate(";"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                      l_str_LabwareIds_long = StrConcat12(l_str_LabwareIds_long, Translate(""), l_strLabwareId, Translate(";"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    }
                  }
                  t_arr_str_MasterMixTubeIDs.AddAsLast(l_strPositionId);
                  t_arr_str_MasterMixTubeLabwareIDs.AddAsLast(l_strLabwareId);
                  SeqIncrement(i_seq_Template, 1);
                }
              }
              l_seq_Template.SetCurrentPosition(1);
              o_seqCreated_distinctPositions = HSLExtensions::Sequence::Copy(l_seq_Template, 1);
              if(0){
                t_seqCreated_distinctPositions = HSLExtensions::Sequence::Copy(l_seq_Template, 1);
              }
              TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, o_seqCreated_distinctPositions);
              TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_str_CarrierID: "), l_str_CarrierID);
              TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_str_SiteIDs_long: "), l_str_SiteIDs_long);
              TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- l_str_PositionIds_long: "), l_str_PositionIds_long);
              if (l_intStringFound >= 0)
              {
              }
              else
              {
                SeqCopySequence(l_seq_Template_copy, l_seq_Template);
                SeqRemoveAll(l_seq_Template_copy);
                l_seq_Template.SetCurrentPosition(1);
                l_intTotalPositionSeqTemplate = SeqGetTotal(l_seq_Template);
                l_intPositionCounter = 0;
                {
                  for(loopCounter6 = 0; loopCounter6 < i_int_NumberOfSamples;)
                  {
                    loopCounter6 = loopCounter6 + 1;
                    l_intPositionCounter = l_intPositionCounter + 1;
                    l_strLabId = SeqGetLabwareId(l_seq_Template);
                    l_strPositionId = SeqGetPositionId(l_seq_Template);
                    SeqAdd(l_seq_Template_copy, l_strLabId, l_strPositionId);
                    SeqIncrement(l_seq_Template, 1);
                    if (l_intPositionCounter == l_intTotalPositionSeqTemplate)
                    {
                      l_intPositionCounter = 0;
                      l_seq_Template.SetCurrentPosition(1);
                    }
                  }
                }
                SeqRemoveAll(l_seq_Template);
                SeqCopySequence(l_seq_Template, l_seq_Template_copy);
                l_seq_Template.SetCurrentPosition(1);
              }
              o_seqCreated_AdjustedtoNumberOfSamples = HSLExtensions::Sequence::Copy(l_seq_Template, 1);
            }
            if (l_bln_UpdateRecordsInFile == ASWGLOBAL::BOOL::TRUE)
            {
              if (l_bln_IsMasterMixComponent == ASWGLOBAL::BOOL::FALSE)
              {
                l_str_ColumnReference = Translate("DB_ReagentName");
              }
              else
              {
                l_str_ColumnReference = Translate("DB_MasterMixComponentName");
              }
              _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_DeadVolumeLabware"), i_flt_DeadVolumeLabware, l_str_ColumnReference, l_str_CurrentReagentName);
              _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_DeadVolumePercent"), i_flt_DeadVolumeReagent, l_str_ColumnReference, l_str_CurrentReagentName);
              _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_TotalVolume"), l_flt_TotalVolumeRequired, l_str_ColumnReference, l_str_CurrentReagentName);
              _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_Units"), l_int_NumberOfContainersNeeded, l_str_ColumnReference, l_str_CurrentReagentName);
              _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_LabwareType"), i_str_LabwareTypeId, l_str_ColumnReference, l_str_CurrentReagentName);
              _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_ReagentNameANDLabwareType"), l_str_ReagentName_Units_LabwareType_Volume, l_str_ColumnReference, l_str_CurrentReagentName);
              _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_CarrierName"), l_str_CarrierID, l_str_ColumnReference, l_str_CurrentReagentName);
              _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_SiteID"), l_str_SiteIDs_long, l_str_ColumnReference, l_str_CurrentReagentName);
              _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_PositionID"), l_str_PositionIds_long, l_str_ColumnReference, l_str_CurrentReagentName);
              _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_LabwareName"), l_str_LabwareIds_long, l_str_ColumnReference, l_str_CurrentReagentName);
            }
            if (loopCounter5 == 1)
            {
              l_flt_TotalVolumeForThisReagent = l_flt_TotalVolumeRequired;
              TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- MASTERMIX/REAGENT l_flt_TotalVolumeForThisReagent: "), l_flt_TotalVolumeForThisReagent);
              l_str_CurrentReagentName = Translate("");
              i_flt_DeadVolumeLabware = 0;
              i_flt_DeadVolumeReagent = 0;
              l_flt_TotalVolumeRequired = 0;
              l_int_NumberOfContainersNeeded = 0;
              i_str_LabwareTypeId = Translate("");
              l_str_ReagentName_Units_LabwareType_Volume = Translate("");
              l_str_CarrierID = Translate("");
              l_str_PositionIds_long = Translate("");
              l_str_LabwareIds_long = Translate("");
              l_str_SiteIDs_long = Translate("");
            }
            if (loopCounter5 == l_int_NumberOfElements)
            {
              break;
            }
          }
        }
        l_int_NumberOfContainersNeeded = SeqGetTotal(o_seqCreated_distinctPositions);
        if (l_bln_IsMasterMixComponent == ASWGLOBAL::BOOL::FALSE)
        {
          if (l_bln_IsReagent == ASWGLOBAL::BOOL::FALSE)
          {
            {
              for(loopCounter11 = 0; loopCounter11 < l_int_NumberOfContainersNeeded;)
              {
                loopCounter11 = loopCounter11 + 1;
                file_MM_Preparation_MastermixTube_ID=t_arr_str_MasterMixTubeIDs.GetAt(loopCounter11-1);
                file_MM_Preparation_MastermixTube_LabwareID=t_arr_str_MasterMixTubeLabwareIDs.GetAt(loopCounter11-1);
                file_MM_Preparation_VolumeMastermixPerTube=t_arr_flt_VolumePerContainer.GetAt(loopCounter11-1);
                {
                  for(loopCounter10 = 0; loopCounter10 < l_int_NumberOfMasterMixComponent;)
                  {
                    loopCounter10 = loopCounter10 + 1;
                    file_MM_Preparation_Component_ID=t_arr_str_MasterMixComponentIDs.GetAt(loopCounter10-1);
                    file_MM_Preparation_Ratio=t_arr_flt_RatioForComponets.GetAt(loopCounter10-1);
                    file_MM_Preparation_VolumeComponentPerTube = file_MM_Preparation_VolumeMastermixPerTube * file_MM_Preparation_Ratio;
                    file_MM_Preparation_SourceComponentTube_ID = Translate("");
                    file_MM_Preparation_SourceComponentTube_LabwareID = Translate("");
                    file_MM_Preparation_SourceVolumeComponentPerTube = Translate("");
                    if( 0 == file_MM_Preparation.WriteRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                  }
                }
              }
            }
            if( 0 != file_MM_Preparation.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            file_MM_Preparation.RemoveFields();
          }
        }
        else
        {
          l_str_PositionIds_forFile = Translate("");
          l_str_LabIds_forFile = Translate("");
          l_str_Volumes_forFile = Translate("");
          {
            for(loopCounter11 = 0; loopCounter11 < l_int_NumberOfContainersNeeded;)
            {
              loopCounter11 = loopCounter11 + 1;
              l_fltVolume=o_arr_flt_VolumePerContainer.GetAt(loopCounter11-1);
              l_fltVolume = MthRound(l_fltVolume, 2);
              l_strVolume = StrFStr(l_fltVolume);
              l_strPositionId = SeqGetPositionId(o_seqCreated_distinctPositions);
              l_strLabwareId = SeqGetLabwareId(o_seqCreated_distinctPositions);
              if (l_int_NumberOfContainersNeeded == loopCounter11)
              {
                l_str_PositionIds_forFile = StrConcat4(l_str_PositionIds_forFile, Translate(""), l_strPositionId, Translate(""));
                l_str_Volumes_forFile = StrConcat4(l_str_Volumes_forFile, Translate(""), l_strVolume, Translate(""));
                l_str_LabIds_forFile = StrConcat4(l_str_LabIds_forFile, Translate(""), l_strLabwareId, Translate(""));
              }
              else
              {
                l_str_PositionIds_forFile = StrConcat4(l_str_PositionIds_forFile, Translate(""), l_strPositionId, Translate(","));
                l_str_Volumes_forFile = StrConcat4(l_str_Volumes_forFile, Translate(""), l_strVolume, Translate(","));
                l_str_LabIds_forFile = StrConcat4(l_str_LabIds_forFile, Translate(""), l_strLabwareId, Translate(","));
              }
              SeqIncrement(o_seqCreated_distinctPositions, 1);
            }
          }
          l_str_SQLSentence = StrConcat12("UPDATE [Mastermix_Prep$] SET [SourceComponentTube_ID] = '",l_str_PositionIds_forFile,"', [SourceComponentTube_LabwareID] = '",l_str_LabIds_forFile,"', [SourceVolumeComponentPerTube] = '",l_str_Volumes_forFile,"' WHERE [Component_ID] = '",i_str_ReagentName,"'","","","");
          Trace(l_str_SQLSentence);
          file_MM_Preparation.AddField("SourceComponentTube_ID", file_MM_Preparation_SourceComponentTube_ID, hslString, 255);
          file_MM_Preparation.AddField("SourceVolumeComponentPerTube", file_MM_Preparation_SourceVolumeComponentPerTube, hslString, 255);
          if( 0 == file_MM_Preparation.Open(t_str_FullpathFile_RunData + " " + "Mastermix_Prep$", hslRead, l_str_SQLSentence) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
          }
          if( 0 != file_MM_Preparation.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          file_MM_Preparation.RemoveFields();
          o_seqCreated_distinctPositions.SetCurrentPosition(1);
        }
      }
    }
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
    return;
  }

  function MMPrep_GetSequencesAndVolumes( variable i_str_ComponentName, sequence & o_seq_AspirateComponents, sequence & o_seq_DispenseComponents, variable & o_arr_fltVolumeComponents[] ) void {
    private variable fileMMPrep_MastermixTube_ID;
    private variable fileMMPrep_VolumeMastermixPerTube;
    private variable fileMMPrep_SourceComponentTube_ID;
    private variable fileMMPrep_VolumeComponentPerTube;
    private variable fileMMPrep_Mastermix_ID;
    private variable fileMMPrep_Component_ID;
    private variable fileMMPrep_SourceVolumeComponentPerTube;
    private variable fileMMPrep_Ratio;
    private variable fileMMPrep_SourceComponentTube_LabwareID;
    private variable loopCounter1;
    private variable fileMMPrep_MastermixTube_LabwareID;
    private variable l_flt_VolumeToAspirateForThisComponent;
    private variable loopCounter2;
    private variable l_int_NumberOfSourceComponentTubeIDs;
    private file fileMMPrep;
    private variable l_arr_SourceComponentTube_LabwareIDs[];
    private variable l_arr_SourceComponentTubeIDs[];
    private variable l_str_SQLSentence;
    { sequence __temp; o_seq_AspirateComponents = __temp; }
    { sequence __temp; o_seq_DispenseComponents = __temp; }
    l_str_SQLSentence = Translate("");
    if (i_str_ComponentName == "ALL")
    {
      Trace("---------------------- MMPrep_GetSequencesAndVolumes for Component: ",i_str_ComponentName);
      l_str_SQLSentence = "";
      Trace("");
      Trace("");
    }
    else
    {
      Trace("---------------------- MMPrep_GetSequencesAndVolumes for Component: ",i_str_ComponentName);
      l_str_SQLSentence = StrConcat12("SELECT * FROM [Mastermix_Prep$] WHERE [Component_ID] = '",i_str_ComponentName,"'","","","","","","","","","");
      Trace("");
      Trace("");
      Trace(l_str_SQLSentence);
    }
    SeqRemoveAll(o_seq_AspirateComponents);
    SeqRemoveAll(o_seq_DispenseComponents);
    fileMMPrep.AddField("Mastermix_ID", fileMMPrep_Mastermix_ID, hslString, 255);
    fileMMPrep.AddField("Component_ID", fileMMPrep_Component_ID, hslString, 255);
    fileMMPrep.AddField("Ratio", fileMMPrep_Ratio, hslFloat);
    fileMMPrep.AddField("MastermixTube_ID", fileMMPrep_MastermixTube_ID, hslString, 255);
    fileMMPrep.AddField("MastermixTube_LabwareID", fileMMPrep_MastermixTube_LabwareID, hslString, 255);
    fileMMPrep.AddField("VolumeMastermixPerTube", fileMMPrep_VolumeMastermixPerTube, hslFloat);
    fileMMPrep.AddField("VolumeComponentPerTube", fileMMPrep_VolumeComponentPerTube, hslFloat);
    fileMMPrep.AddField("SourceComponentTube_ID", fileMMPrep_SourceComponentTube_ID, hslString, 255);
    fileMMPrep.AddField("SourceComponentTube_LabwareID", fileMMPrep_SourceComponentTube_LabwareID, hslString, 255);
    fileMMPrep.AddField("SourceVolumeComponentPerTube", fileMMPrep_SourceVolumeComponentPerTube, hslString, 255);
    if( 0 == fileMMPrep.Open(t_str_FullpathFile_RunData + " " + "Mastermix_Prep$", hslRead, l_str_SQLSentence) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (fileMMPrep.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == fileMMPrep.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_arr_SourceComponentTubeIDs = HSLExtensions::String::Split(fileMMPrep_SourceComponentTube_ID, Translate(","), ASWGLOBAL::BOOL::TRUE);
        l_arr_SourceComponentTube_LabwareIDs = HSLExtensions::String::Split(fileMMPrep_SourceComponentTube_LabwareID, Translate(","), ASWGLOBAL::BOOL::TRUE);
        l_int_NumberOfSourceComponentTubeIDs=l_arr_SourceComponentTubeIDs.GetSize();
        l_flt_VolumeToAspirateForThisComponent = fileMMPrep_VolumeComponentPerTube / (l_int_NumberOfSourceComponentTubeIDs * 1.0);
        l_flt_VolumeToAspirateForThisComponent = MthRound(l_flt_VolumeToAspirateForThisComponent, 1);
        {
          for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfSourceComponentTubeIDs;)
          {
            loopCounter2 = loopCounter2 + 1;
            o_arr_fltVolumeComponents.AddAsLast(l_flt_VolumeToAspirateForThisComponent);
            SeqAdd(o_seq_AspirateComponents, l_arr_SourceComponentTube_LabwareIDs.ElementAt( loopCounter2 -1), l_arr_SourceComponentTubeIDs.ElementAt( loopCounter2 -1));
            SeqAdd(o_seq_DispenseComponents, fileMMPrep_MastermixTube_LabwareID, fileMMPrep_MastermixTube_ID);
          }
        }
      }
    }
    o_seq_AspirateComponents.SetCurrentPosition(1);
    o_seq_DispenseComponents.SetCurrentPosition(1);
    if( 0 != fileMMPrep.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileMMPrep.RemoveFields();
    TrcTraceSequence(o_seq_AspirateComponents);
    TrcTraceSequence(o_seq_DispenseComponents);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("o_arr_fltVolumeComponents: "), o_arr_fltVolumeComponents);
  }

  private function Add_ContainerToRack( device & i_MLSTAR, variable i_strLabwareID, variable i_intPositionID, variable i_intNumberOfTubes, variable i_strConfigFile, variable i_intXOffset, variable i_intYOffset, variable i_intZOffset ) void {
    private variable l_strPositionID;
    private variable loopCounter1;
    {
      for(loopCounter1 = 0; loopCounter1 < i_intNumberOfTubes;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_strPositionID = StrIStr(i_intPositionID);
        DevAddContainerToRack(i_MLSTAR, i_strLabwareID, l_strPositionID, i_strConfigFile, i_intXOffset, i_intYOffset, i_intZOffset);
        i_intPositionID = i_intPositionID + 1;
      }
    }
  }

  function Add_LabwareForCurrentProcess( device & ML_STAR, variable i_str_LabwareType, variable i_str_LabwareName, variable i_int_NumberOfUnits, sequence & i_seq_Template, variable i_var_PositionInSequence ) void {
    private variable l_str_LabwareId_SeqTemplate;
    private variable l_int_ReturnSearch_TubeCarriers;
    private variable l_intReturnValueFindSubString;
    private variable l_str_ConcatLabwareTypeAndName;
    private variable l_str_SiteID_long;
    private variable l_str_CarrierID;
    private variable l_intReturnValueFindSubString_PLT_TIP1000;
    private variable l_int_NumberOfTubePositionsDetected;
    private variable l_int_RecordCounter;
    private variable l_str_sequenceName;
    private variable l_int_NumberOfLabwareIds;
    private variable l_int_NumberOfCarriers;
    private variable l_str_SiteID;
    private variable loopCounter1;
    private variable l_str_SQLSentence;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable l_str_PositionIDs_Sorted;
    private variable l_int_MaxNumberOfSites;
    private variable l_int_NumberOfSitesPerCarrier;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable l_int_AdditionToUnits;
    private variable l_bln_ArraySorted;
    private variable l_arr_str_SortedPositions[];
    private variable l_arr_seqTemplateLabwareIds[];
    private variable l_arr_strTokens[];
    private variable l_arr_strSiteNamesForThisCarrier_Distinct[];
    private variable l_arr_strCarrierName_Distinct[];
    private variable l_arr_strSiteNames[];
    private variable l_arr_strSiteNamesForThisCarrier[];
    private variable l_arr_strCarrierName[];
    if (i_int_NumberOfUnits != 0)
    {
      l_str_SQLSentence = Translate("");
      _Reset_FileRunData_Variables();
      l_str_sequenceName = SeqGetName(i_seq_Template);
      l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_LabwareType] = '",i_str_LabwareType,"' AND [DB_ReagentName] = '",i_str_LabwareName,"' AND [DB_LabwareName] = '",l_str_sequenceName,"'","","","","","");
      Trace(l_str_SQLSentence);
      //l_str_SQLSentence = StrConcat12("","","","","","","","","","","","");
      l_int_RecordCounter = 0;
      l_int_AdditionToUnits = 0;
      file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
      file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
      file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
      file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
      file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
      file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
      file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
      file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
      file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
      file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
      file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
      file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
      file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
      file_RunData.AddField("DB_PrepareMastermixOnDeck", file_RunData_DB_PrepareMastermixOnDeck, hslInteger);
      file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, l_str_SQLSentence) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
      {
        loopCounter1 = 0;
        while (
           (file_RunData.Eof() == 0)
        )
        {
          loopCounter1 = loopCounter1 + 1;
          if( 0 == file_RunData.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_int_RecordCounter = l_int_RecordCounter + 1;
        }
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
      if (l_int_RecordCounter > 0)
      {
        MECC::TraceComment(Translate("These values ARE PRESENT in File"));
        l_int_AdditionToUnits = file_RunData_DB_Units + i_int_NumberOfUnits;
        l_str_LabwareId_SeqTemplate = SeqGetLabwareId(i_seq_Template);
        _GetCarrierIDandSiteID_FromLabID(ML_STAR, l_str_LabwareId_SeqTemplate, l_str_CarrierID, l_str_SiteID);
        l_int_ReturnSearch_TubeCarriers = StrFind(l_str_SiteID, Translate("T-"));
        if (l_int_ReturnSearch_TubeCarriers >= 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Searching for string T-  resulted TRUE"), Translate(""));
          file_RunData_DB_PositionID = StrConcat12(file_RunData_DB_PositionID, Translate(","), i_var_PositionInSequence, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_PositionID: "), file_RunData_DB_PositionID);
          STRTOKENIZE::StrTokenize(file_RunData_DB_PositionID, Translate(","), l_arr_strTokens, ASWGLOBAL::BOOL::FALSE);
          l_arr_str_SortedPositions = HSLExtensions::Array::Sort(l_arr_strTokens, 1, l_bln_ArraySorted);
          if (l_bln_ArraySorted == ASWGLOBAL::BOOL::TRUE)
          {
            l_str_PositionIDs_Sorted = Translate("");
            l_int_NumberOfTubePositionsDetected=l_arr_str_SortedPositions.GetSize();
            {
              for(loopCounter5 = 0; loopCounter5 < l_int_NumberOfTubePositionsDetected;)
              {
                loopCounter5 = loopCounter5 + 1;
                if (loopCounter5 == 1)
                {
                  l_str_PositionIDs_Sorted = StrConcat12(l_str_PositionIDs_Sorted, Translate(""), l_arr_str_SortedPositions.ElementAt( loopCounter5 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                }
                else
                {
                  l_str_PositionIDs_Sorted = StrConcat12(l_str_PositionIDs_Sorted, Translate(","), l_arr_str_SortedPositions.ElementAt( loopCounter5 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                }
              }
            }
          }
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_str_PositionIDs_Sorted: "), l_str_PositionIDs_Sorted);
          l_str_SQLSentence = StrConcat12("UPDATE [RunData$] SET [DB_Units] = ", l_int_AdditionToUnits,", [DB_PositionID] = '",l_str_PositionIDs_Sorted,"' WHERE [DB_LabwareType] = '",i_str_LabwareType,"' AND [DB_ReagentName] = '",i_str_LabwareName,"'","","","");
          Trace(l_str_SQLSentence);
          //l_str_SQLSentence = StrConcat12("","","","","","","","","","","","");
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Searching for string T-  resulted FALSE"), Translate(""));
          l_str_SQLSentence = StrConcat12("UPDATE [RunData$] SET [DB_Units] = ", l_int_AdditionToUnits," WHERE [DB_LabwareType] = '",i_str_LabwareType,"' AND [DB_ReagentName] = '",i_str_LabwareName,"'","","","","","");
          Trace(l_str_SQLSentence);
          //l_str_SQLSentence = StrConcat12("","","","","","","","","","","","");
        }
        file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
        file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
        file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
        file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
        file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
        file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
        file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
        file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
        file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
        file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
        file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
        file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
        file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
        file_RunData.AddField("DB_PrepareMastermixOnDeck", file_RunData_DB_PrepareMastermixOnDeck, hslInteger);
        file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
        if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, l_str_SQLSentence) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
        }
        if( 0 != file_RunData.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file_RunData.RemoveFields();
      }
      else
      {
        MECC::TraceComment(Translate("These values ARE NOT PRESENT in File"));
        _Reset_FileRunData_Variables();
        SeqGetLabwareIds(i_seq_Template, l_arr_seqTemplateLabwareIds);
        l_int_NumberOfLabwareIds=l_arr_seqTemplateLabwareIds.GetSize();
        l_arr_strCarrierName.SetSize(0);
        {
          for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfLabwareIds;)
          {
            loopCounter2 = loopCounter2 + 1;
            _GetCarrierIDandSiteID_FromLabID(ML_STAR, l_arr_seqTemplateLabwareIds.ElementAt( loopCounter2 -1), l_str_CarrierID, l_str_SiteID);
            l_arr_strCarrierName.AddAsLast(l_str_CarrierID);
            l_arr_strSiteNames.AddAsLast(l_str_SiteID);
            l_int_ReturnSearch_TubeCarriers = StrFind(l_str_SiteID, Translate("T-"));
          }
        }
        ARRAYTOOLS::get_distinct_from_array(l_arr_strCarrierName, l_arr_strCarrierName_Distinct);
        l_int_NumberOfCarriers=l_arr_strCarrierName_Distinct.GetSize();
        {
          for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfCarriers;)
          {
            loopCounter3 = loopCounter3 + 1;
            ARRAYTOOLS::ArrayVLookUp(l_arr_strSiteNames, l_arr_strCarrierName, l_arr_strCarrierName_Distinct.ElementAt( loopCounter3 -1), l_arr_strSiteNamesForThisCarrier);
            ARRAYTOOLS::get_distinct_from_array(l_arr_strSiteNamesForThisCarrier, l_arr_strSiteNamesForThisCarrier_Distinct);
            l_int_NumberOfSitesPerCarrier=l_arr_strSiteNamesForThisCarrier_Distinct.GetSize();
            file_RunData_DB_CarrierName = l_arr_strCarrierName_Distinct.ElementAt( loopCounter3 -1);
            file_RunData_DB_SiteID = l_arr_strSiteNamesForThisCarrier_Distinct.ElementAt( loopCounter3 -1);
            file_RunData_DB_ReagentType = Translate("LabwareResource");
            file_RunData_DB_LabwareType = i_str_LabwareType;
            file_RunData_DB_LabwareName = l_str_sequenceName;
            file_RunData_DB_ReagentName = i_str_LabwareName;
            if (i_str_LabwareType == i_str_LabwareName)
            {
              file_RunData_DB_ReagentNameANDLabwareType = i_str_LabwareName;
            }
            else
            {
              l_str_ConcatLabwareTypeAndName = StrConcat12(i_str_LabwareType, Translate(" ("), i_str_LabwareName, Translate(")"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              file_RunData_DB_ReagentNameANDLabwareType = l_str_ConcatLabwareTypeAndName;
            }
            file_RunData_DB_Units = i_int_NumberOfUnits;
            l_str_SiteID_long = Translate("");
            if (l_int_ReturnSearch_TubeCarriers >= 0)
            {
              file_RunData_DB_PositionID = i_var_PositionInSequence;
            }
            else
            {
              {
                for(loopCounter4 = 0; loopCounter4 < l_int_NumberOfSitesPerCarrier;)
                {
                  loopCounter4 = loopCounter4 + 1;
                  if (loopCounter4 == l_int_NumberOfSitesPerCarrier)
                  {
                    l_str_SiteID_long = StrConcat12(l_str_SiteID_long, l_arr_strSiteNamesForThisCarrier_Distinct.ElementAt( loopCounter4 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                  }
                  else
                  {
                    l_str_SiteID_long = StrConcat12(l_str_SiteID_long, l_arr_strSiteNamesForThisCarrier_Distinct.ElementAt( loopCounter4 -1), Translate(","), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                  }
                }
              }
              l_intReturnValueFindSubString = StrFind(l_arr_strCarrierName_Distinct.ElementAt( loopCounter3 -1), Translate("TIP"));
              if (l_intReturnValueFindSubString >= 0)
              {
                l_intReturnValueFindSubString_PLT_TIP1000 = StrFind(l_arr_strCarrierName_Distinct.ElementAt( loopCounter3 -1), ARW_Global::CarrierType::PLT_TIP1000);
                if (l_intReturnValueFindSubString_PLT_TIP1000 >= 0)
                {
                  file_RunData_DB_PositionID = l_str_SiteID_long;
                }
                else
                {
                  if (i_str_LabwareType == ARW_Global::LabwareType::TIP50)
                  {
                    l_int_MaxNumberOfSites = ARW_Global::TipLocations::NumberOfSlotsFor50;
                  }
                  if (i_str_LabwareType == ARW_Global::LabwareType::TIP300)
                  {
                    l_int_MaxNumberOfSites = ARW_Global::TipLocations::NumberOfSlotsFor300;
                  }
                  if (i_str_LabwareType == ARW_Global::LabwareType::TIP1000)
                  {
                    l_int_MaxNumberOfSites = ARW_Global::TipLocations::NumberOfSlotsFor1000;
                  }
                  if (i_str_LabwareType != ARW_Global::LabwareType::TIPAdapter)
                  {
                    file_RunData_DB_PositionID = StrConcat12(Translate("1 - "), l_int_MaxNumberOfSites, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                  }
                  else
                  {
                    if(0){
                      file_RunData_DB_SiteID = Translate("Tip Adapter");
                    }
                    file_RunData_DB_SiteID = Translate("1");
                  }
                }
              }
              else
              {
                file_RunData_DB_PositionID = l_str_SiteID_long;
              }
            }
            file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
            file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
            file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
            file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
            file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
            file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
            file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
            file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
            file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
            file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
            file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
            file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
            file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
            file_RunData.AddField("DB_PrepareMastermixOnDeck", file_RunData_DB_PrepareMastermixOnDeck, hslInteger);
            file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
            if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslAppend) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
            }
            if( 0 == file_RunData.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 != file_RunData.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            file_RunData.RemoveFields();
          }
        }
        l_arr_strSiteNames.SetSize(0);
      }
    }
  }

  function Load_Carrier( device & ML_STAR, variable i_str_CarrierID, variable i_bln_SkipLoadingRoutine, variable i_bln_IsItLoadable, variable i_bln_LoadCarrierOnly_NoDialogs, variable i_str_MainImageName, variable i_str_SubImageName ) variable {
    private variable l_bln_CarrierLoaded;
    private variable l_intReturnValueFindSubString;
    private variable l_int_ReturnSearchIndex;
    private variable l_bln_50Fseq_Unloaded;
    private variable l_int_MaximumNumberOfPlatesAllowed;
    private variable l_bln_AllPlatesAddedToStack;
    private variable l_intTotalNumberOfPlatesNeeded;
    private variable l_bln_MultiplePositionsFound;
    private variable l_intReturnValueFindSubString1000;
    private variable l_intNumberOfSiteIDs;
    private variable l_str_FunctionName;
    private variable l_int_MaxNumberOfPlatesPerStack;
    private variable l_intReturnValueFindSubString_TIP_50F;
    private variable l_intReturnValueFindSubString50;
    private variable l_int_rtnErrorDialog;
    private variable l_int_ReturnSearch_RGT;
    private variable l_bln_300Fseq_Unloaded;
    private variable l_int_RemainingUnitsToLoad;
    private variable l_intReturnValueFindSubString_TIP_300F;
    private variable l_int_NumberOfPlatesPerSite;
    private variable l_str_RunData_DB_TotalVolume;
    private variable l_str_SQLSentence;
    private variable loopCounter1;
    private variable l_int_LengthString;
    private variable loopCounter2;
    private variable l_str_RunData_DB_Units;
    private variable loopCounter3;
    private variable l_intNumberOfPlatesLastSite;
    private variable loopCounter4;
    private variable l_str_PLT_1000TIP_Positions;
    private variable l_intReturnValueFindSubString300;
    private variable l_int_TipType;
    private variable l_strStepRetrunValueLoadCarrier;
    private variable l_arr_strPositionIds_ForThisCarrier[];
    private variable l_arr_DataColumn3_Descriptions[];
    private variable l_arr_DataColumn1_Positions[];
    private variable l_arr_DataColumn2_QuantityVolumes[];
    private variable l_int_NumberOfElementsInThisCarrier;
    private variable loopCounter5;
    private variable l_arr_MultipleElementForThisCarrier[];
    l_str_FunctionName = Translate("");
    l_str_FunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    l_bln_CarrierLoaded = ASWGLOBAL::BOOL::FALSE;
    Util2::Debug::TraceArray(Translate("*******************************   t_arr_strCarrierName_Distinct: "), t_arr_strCarrierName_Distinct);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Carrier requested: "), i_str_CarrierID);
    l_int_ReturnSearchIndex = ARRAYTOOLS::Lookup(t_arr_strCarrierName_Distinct, i_str_CarrierID);
    Trace("result for searching carrier ID : ",l_int_ReturnSearchIndex);
    l_bln_50Fseq_Unloaded = ASWGLOBAL::BOOL::FALSE;
    l_bln_300Fseq_Unloaded = ASWGLOBAL::BOOL::FALSE;
    if (l_int_ReturnSearchIndex != 0)
    {
      if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      if (i_bln_SkipLoadingRoutine != ASWGLOBAL::BOOL::TRUE)
      {
        if (i_bln_IsItLoadable == ASWGLOBAL::BOOL::TRUE)
        {
          l_intReturnValueFindSubString_TIP_50F = StrFind(i_str_CarrierID, ARW_Global::CarrierType::TIP50_01);
          if (l_intReturnValueFindSubString_TIP_50F >= 0)
          {
            ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
            {
              ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            }
          }
          else
          {
            l_intReturnValueFindSubString_TIP_300F = StrFind(i_str_CarrierID, ARW_Global::CarrierType::TIP300_01);
            if (l_intReturnValueFindSubString_TIP_300F >= 0)
            {
              ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
              if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
              }
            }
            else
            {
              ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            }
          }
        }
      }
      l_arr_DataColumn1_Positions.SetSize(0);
      l_arr_DataColumn2_QuantityVolumes.SetSize(0);
      l_arr_DataColumn3_Descriptions.SetSize(0);
      l_arr_MultipleElementForThisCarrier.SetSize(0);
      l_str_SQLSentence = Translate("");
      l_str_PLT_1000TIP_Positions = Translate("");
      l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_CarrierName] = '",i_str_CarrierID,"'","","","","","","","","","");
      Trace(l_str_SQLSentence);
      //l_str_SQLSentence = StrConcat12("","","","","","","","","","","","");
      Trace ("t_str_FullpathFile_RunData: ", t_str_FullpathFile_RunData);
      file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
      file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
      file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
      file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
      file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
      file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
      file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
      file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
      file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
      file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
      file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
      file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
      file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
      file_RunData.AddField("DB_PrepareMastermixOnDeck", file_RunData_DB_PrepareMastermixOnDeck, hslInteger);
      file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, l_str_SQLSentence) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
      {
        loopCounter2 = 0;
        while (
           (file_RunData.Eof() == 0)
        )
        {
          loopCounter2 = loopCounter2 + 1;
          if( 0 == file_RunData.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_arr_MultipleElementForThisCarrier.AddAsLast(file_RunData_DB_ReagentName);
          l_int_LengthString = StrGetLength(file_RunData_DB_PositionID);
          if (i_str_CarrierID == ARW_Global::CarrierType::PLT_TIP1000)
          {
            if (file_RunData_DB_LabwareType == ARW_Global::LabwareType::TIP1000)
            {
              l_str_PLT_1000TIP_Positions = StrConcat12(l_str_PLT_1000TIP_Positions, file_RunData_DB_PositionID, Translate(","), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              l_arr_DataColumn1_Positions.AddAsLast(l_str_PLT_1000TIP_Positions);
            }
            else
            {
              if (t_bln_CheckAditionalBarcodes == ASWGLOBAL::BOOL::TRUE)
              {
                l_str_PLT_1000TIP_Positions = StrConcat12(l_str_PLT_1000TIP_Positions, file_RunData_DB_PositionID, Translate(","), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              }
              l_arr_DataColumn1_Positions.AddAsLast(file_RunData_DB_PositionID);
            }
          }
          else
          {
            l_bln_MultiplePositionsFound = StrFind(file_RunData_DB_PositionID, Translate(","));
            if (l_int_LengthString == 0)
            {
              l_arr_DataColumn1_Positions.AddAsLast(file_RunData_DB_SiteID);
            }
            else
            {
              if (l_bln_MultiplePositionsFound >= 0)
              {
                if (file_RunData_DB_CarrierName != ARW_Global::CarrierType::PLT_Stack)
                {
                  l_intNumberOfSiteIDs = 1;
                  l_arr_DataColumn1_Positions.AddAsLast(file_RunData_DB_PositionID);
                }
                else
                {
                  STRTOKENIZE::StrTokenize(file_RunData_DB_PositionID, Translate(","), l_arr_strPositionIds_ForThisCarrier, ASWGLOBAL::BOOL::FALSE);
                  l_intNumberOfSiteIDs=l_arr_strPositionIds_ForThisCarrier.GetSize();
                  {
                    for(loopCounter3 = 0; loopCounter3 < l_intNumberOfSiteIDs;)
                    {
                      loopCounter3 = loopCounter3 + 1;
                      l_arr_DataColumn1_Positions.AddAsLast(l_arr_strPositionIds_ForThisCarrier.ElementAt( loopCounter3 -1));
                    }
                  }
                }
              }
              else
              {
                l_intNumberOfSiteIDs = 1;
                l_arr_DataColumn1_Positions.AddAsLast(file_RunData_DB_PositionID);
              }
            }
          }
          l_int_ReturnSearch_RGT = StrFind(i_str_CarrierID, Translate("RGT"));
          if (i_str_CarrierID == ARW_Global::CarrierType::PLT_Stack)
          {
            if (file_RunData_DB_LabwareType == ARW_Global::LabwareType::MIDI_Plate)
            {
              l_int_MaxNumberOfPlatesPerStack = ARW_Global::StackDefinition::NumberOfUnitsStack_MIDI_Plate;
            }
            if (file_RunData_DB_LabwareType == ARW_Global::LabwareType::HSP_Plate)
            {
              l_int_MaxNumberOfPlatesPerStack = ARW_Global::StackDefinition::NumberOfUnitsStack_HSP_Plate;
            }
            if (file_RunData_DB_LabwareType == ARW_Global::LabwareType::Comfortlid)
            {
              l_int_MaxNumberOfPlatesPerStack = ARW_Global::StackDefinition::NumberOfUnitsStack_Comfortlid;
            }
          }
          if (l_int_ReturnSearch_RGT >= 0)
          {
            _GenerateString(file_RunData_DB_TotalVolume, l_str_RunData_DB_TotalVolume);
            l_arr_DataColumn2_QuantityVolumes.AddAsLast(l_str_RunData_DB_TotalVolume);
            l_arr_DataColumn3_Descriptions.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
          }
          else
          {
            if (l_bln_MultiplePositionsFound != 0)
            {
              if (i_str_CarrierID == ARW_Global::CarrierType::PLT_Stack)
              {
                l_intTotalNumberOfPlatesNeeded = file_RunData_DB_Units;
                l_int_MaximumNumberOfPlatesAllowed = l_int_MaxNumberOfPlatesPerStack * l_intNumberOfSiteIDs;
                TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_intTotalNumberOfPlatesNeeded: "), l_intTotalNumberOfPlatesNeeded);
                TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_int_MaximumNumberOfPlatesAllowed: "), l_int_MaximumNumberOfPlatesAllowed);
                TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_int_MaxNumberOfPlatesPerStack: "), l_int_MaxNumberOfPlatesPerStack);
                if (l_intTotalNumberOfPlatesNeeded > l_int_MaximumNumberOfPlatesAllowed)
                {
                  Display_Error_Dialog(Translate("The number of elements to stack exceeds the total number of positions in 'stack deck sequence'. Review maximum number of elements in stack. Method will abort"));
                  abort;
                }
                l_intNumberOfPlatesLastSite = file_RunData_DB_Units % l_int_MaxNumberOfPlatesPerStack;
                if (l_intNumberOfPlatesLastSite == 0)
                {
                  l_intNumberOfPlatesLastSite = l_int_MaxNumberOfPlatesPerStack;
                }
                l_bln_AllPlatesAddedToStack = ASWGLOBAL::BOOL::FALSE;
                {
                  for(loopCounter4 = 0; loopCounter4 < l_intNumberOfSiteIDs;)
                  {
                    loopCounter4 = loopCounter4 + 1;
                    if (l_bln_AllPlatesAddedToStack == ASWGLOBAL::BOOL::FALSE)
                    {
                      if (file_RunData_DB_Units <= l_int_MaxNumberOfPlatesPerStack)
                      {
                        l_int_NumberOfPlatesPerSite = file_RunData_DB_Units;
                      }
                      else
                      {
                        if (l_intNumberOfSiteIDs != loopCounter4)
                        {
                        l_int_NumberOfPlatesPerSite = l_int_MaxNumberOfPlatesPerStack;
                        }
                        else
                        {
                        l_int_NumberOfPlatesPerSite = l_intNumberOfPlatesLastSite;
                        }
                      }
                    }
                    _ConvertValueToString(l_int_NumberOfPlatesPerSite, l_str_RunData_DB_Units);
                    l_arr_DataColumn2_QuantityVolumes.AddAsLast(l_str_RunData_DB_Units);
                    l_arr_DataColumn3_Descriptions.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
                    l_int_RemainingUnitsToLoad = l_intTotalNumberOfPlatesNeeded - l_int_NumberOfPlatesPerSite;
                    if (l_int_RemainingUnitsToLoad == 0)
                    {
                      l_intTotalNumberOfPlatesNeeded = 0;
                      l_int_NumberOfPlatesPerSite = 0;
                      l_bln_AllPlatesAddedToStack = ASWGLOBAL::BOOL::TRUE;
                    }
                    else
                    {
                      l_bln_AllPlatesAddedToStack = ASWGLOBAL::BOOL::FALSE;
                    }
                  }
                }
              }
              else
              {
                _ConvertValueToString(file_RunData_DB_Units, l_str_RunData_DB_Units);
                l_arr_DataColumn2_QuantityVolumes.AddAsLast(l_str_RunData_DB_Units);
                l_arr_DataColumn3_Descriptions.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
              }
            }
            else
            {
              _ConvertValueToString(file_RunData_DB_Units, l_str_RunData_DB_Units);
              l_arr_DataColumn2_QuantityVolumes.AddAsLast(l_str_RunData_DB_Units);
              l_arr_DataColumn3_Descriptions.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
            }
          }
        }
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
      l_int_LengthString = StrGetLength(l_str_PLT_1000TIP_Positions);
      l_int_LengthString = l_int_LengthString - 1;
      l_str_PLT_1000TIP_Positions = StrLeft(l_str_PLT_1000TIP_Positions, l_int_LengthString);
      Util2::Debug::TraceArray(Translate("l_arr_DataColumn1_Positions: "), l_arr_DataColumn1_Positions);
      Util2::Debug::TraceArray(Translate("l_arr_DataColumn2_QuantityVolumes: "), l_arr_DataColumn2_QuantityVolumes);
      Util2::Debug::TraceArray(Translate("l_arr_DataColumn3_Descriptions: "), l_arr_DataColumn3_Descriptions);
      _SortElements(l_arr_DataColumn1_Positions, l_arr_DataColumn2_QuantityVolumes, l_arr_DataColumn3_Descriptions, 1);
      if (i_bln_LoadCarrierOnly_NoDialogs == ASWGLOBAL::BOOL::FALSE)
      {
        _Display_LoadCarrier_Dialog(i_str_MainImageName, i_str_SubImageName, Translate(""), l_arr_DataColumn1_Positions, l_arr_DataColumn2_QuantityVolumes, l_arr_DataColumn3_Descriptions);
        l_intReturnValueFindSubString = StrFind(i_str_CarrierID, Translate("TIP"));
        if (l_intReturnValueFindSubString < 0)
        {
          l_intReturnValueFindSubString = StrFind(i_str_CarrierID, Translate("Tip"));
        }
        if (l_intReturnValueFindSubString >= 0)
        {
          MECC::TraceComment(Translate("Substring \"Tip\" found within Carrier ID to be loaded"));
          l_intReturnValueFindSubString50 = StrFind(file_RunData_DB_ReagentName, ARW_Global::LabwareType::TIP50);
          l_intReturnValueFindSubString300 = StrFind(file_RunData_DB_ReagentName, ARW_Global::LabwareType::TIP300);
          l_int_NumberOfElementsInThisCarrier=l_arr_MultipleElementForThisCarrier.GetSize();
          if (l_int_NumberOfElementsInThisCarrier == 1)
          {
            l_intReturnValueFindSubString1000 = StrFind(file_RunData_DB_ReagentName, ARW_Global::LabwareType::TIP1000);
          }
          else
          {
            {
              for(loopCounter5 = 0; loopCounter5 < l_int_NumberOfElementsInThisCarrier;)
              {
                loopCounter5 = loopCounter5 + 1;
                l_intReturnValueFindSubString1000 = StrFind(l_arr_MultipleElementForThisCarrier.ElementAt( loopCounter5 -1), ARW_Global::LabwareType::TIP1000);
                if (l_intReturnValueFindSubString1000 >= 0)
                {
                  break;
                }
              }
            }
          }
          if (l_intReturnValueFindSubString50 >= 0)
          {
            l_int_TipType = 1;
          }
          else
          {
          }
          if (l_intReturnValueFindSubString300 >= 0)
          {
            l_int_TipType = 2;
          }
          else
          {
          }
          if (l_intReturnValueFindSubString1000 >= 0)
          {
            l_int_TipType = 3;
          }
          else
          {
          }
          DATA_TipCounterRead(ML_STAR, file_RunData_DB_Units, file_RunData_DB_Units, file_RunData_DB_Units, l_int_TipType, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
          DATA_TipCounterWrite(ML_STAR);
        }
      }
      if (i_bln_SkipLoadingRoutine != ASWGLOBAL::BOOL::TRUE)
      {
        if (i_bln_IsItLoadable == ASWGLOBAL::BOOL::TRUE)
        {
          Trace("Carrier ID to be loaded:", i_str_CarrierID);
          if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
          {
            {
              loopCounter1 = 0;
              while (1 == 1)
              {
                loopCounter1 = loopCounter1 + 1;
                onerror goto errLabel_9 ;
                err.Clear();
                ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                break;
                errLabel_9 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
                  l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
                  _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
                }   /* end if from skip handler if no error */
              }
            }
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
          if (l_intReturnValueFindSubString_TIP_50F >= 0)
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
            }
            if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
              }
            }
          }
          else
          {
            if (l_intReturnValueFindSubString_TIP_300F >= 0)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
              }
              if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
                }
              }
            }
            else
            {
              if (i_str_CarrierID == ARW_Global::CarrierType::PLT_TIP1000)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
                }
              }
            }
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        }
      }
      return (ASWGLOBAL::BOOL::TRUE);
      if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
      {
        {
          loopCounter1 = 0;
          while (1 == 1)
          {
            loopCounter1 = loopCounter1 + 1;
            onerror goto errLabel_10 ;
            err.Clear();
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            break;
            errLabel_10 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
              l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            }   /* end if from skip handler if no error */
          }
        }
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    else
    {
      MECC::TraceComment(Translate("Carrier ID not found withing ARW list (HSL file) --> no loading will be performed!\nHint : If you want to use this command with a new carrier : update first your HSL file..."));
    }
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  function Load_Carrier_MultiTipSeq( device & ML_STAR, variable i_str_CarrierID, variable i_bln_SkipLoadingRoutine, variable i_bln_IsItLoadable, variable i_bln_LoadCarrierOnly_NoDialogs, variable i_str_MainImageName, variable i_str_SubImageName ) variable {
    private variable l_bln_CarrierLoaded;
    private variable l_intReturnValueFindSubString;
    private variable l_bln_50Fseq_Unloaded;
    private variable l_strGetArrayDescription;
    private variable l_int_ReturnSearchIndex;
    private variable l_intReturnValueFindSubString1000;
    private variable l_str_FunctionName;
    private variable l_intReturnValueFindSubString_TIP_50F;
    private variable l_intReturnValueFindSubString50;
    private variable l_int_ReturnSearch_RGT;
    private variable l_int_rtnErrorDialog;
    private variable l_bln_300Fseq_Unloaded;
    private variable l_intReturnValueFindSubString_TIP_300F;
    private variable l_str_RunData_DB_TotalVolume;
    private variable l_str_SQLSentence;
    private variable l_int_LengthString;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable l_str_RunData_DB_Units;
    private variable loopCounter3;
    private variable l_intSizeArrayDescriptions;
    private variable l_str_PLT_1000TIP_Positions;
    private variable l_intReturnValueFindSubString300;
    private variable l_int_TipType;
    private variable l_strStepRetrunValueLoadCarrier;
    private variable l_arr_DataColumn3_Descriptions[];
    private variable l_arr_DataColumn1_Positions[];
    private variable l_arr_DataColumn2_QuantityVolumes[];
    l_str_FunctionName = Translate("");
    l_str_FunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    l_bln_CarrierLoaded = ASWGLOBAL::BOOL::FALSE;
    Util2::Debug::TraceArray(Translate("*******************************   t_arr_strCarrierName_Distinct: "), t_arr_strCarrierName_Distinct);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Carrier requested: "), i_str_CarrierID);
    l_int_ReturnSearchIndex = ARRAYTOOLS::Lookup(t_arr_strCarrierName_Distinct, i_str_CarrierID);
    Trace("result for searching carrier ID : ",l_int_ReturnSearchIndex);
    l_bln_50Fseq_Unloaded = ASWGLOBAL::BOOL::FALSE;
    l_bln_300Fseq_Unloaded = ASWGLOBAL::BOOL::FALSE;
    if (l_int_ReturnSearchIndex != 0)
    {
      if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      if (i_bln_SkipLoadingRoutine != ASWGLOBAL::BOOL::TRUE)
      {
        if (i_bln_IsItLoadable == ASWGLOBAL::BOOL::TRUE)
        {
          if(0){
            l_intReturnValueFindSubString_TIP_50F = StrFind(i_str_CarrierID, ARW_Global::CarrierType::TIP50_01);
          }
          l_intReturnValueFindSubString_TIP_50F = StrFind(i_str_CarrierID, ARW_Global::CarrierType::TIP50_02);
          if (l_intReturnValueFindSubString_TIP_50F >= 0)
          {
            ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
            {
              ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            }
          }
          else
          {
            l_intReturnValueFindSubString_TIP_300F = StrFind(i_str_CarrierID, ARW_Global::CarrierType::TIP300_01);
            if (l_intReturnValueFindSubString_TIP_300F >= 0)
            {
              ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
              if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
              }
            }
            else
            {
              ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            }
          }
        }
      }
      l_arr_DataColumn1_Positions.SetSize(0);
      l_arr_DataColumn2_QuantityVolumes.SetSize(0);
      l_arr_DataColumn3_Descriptions.SetSize(0);
      l_str_SQLSentence = Translate("");
      l_str_PLT_1000TIP_Positions = Translate("");
      l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_CarrierName] = '",i_str_CarrierID,"'","","","","","","","","","");
      Trace(l_str_SQLSentence);
      //l_str_SQLSentence = StrConcat12("","","","","","","","","","","","");
      Trace ("t_str_FullpathFile_RunData: ", t_str_FullpathFile_RunData);
      file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
      file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
      file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
      file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
      file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
      file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
      file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
      file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
      file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
      file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
      file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
      file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
      file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
      file_RunData.AddField("DB_PrepareMastermixOnDeck", file_RunData_DB_PrepareMastermixOnDeck, hslInteger);
      file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, l_str_SQLSentence) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
      {
        loopCounter2 = 0;
        while (
           (file_RunData.Eof() == 0)
        )
        {
          loopCounter2 = loopCounter2 + 1;
          if( 0 == file_RunData.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_int_LengthString = StrGetLength(file_RunData_DB_PositionID);
          if (i_str_CarrierID == ARW_Global::CarrierType::PLT_TIP1000)
          {
            l_str_PLT_1000TIP_Positions = StrConcat12(l_str_PLT_1000TIP_Positions, file_RunData_DB_PositionID, Translate(","), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          }
          if (l_int_LengthString == 0)
          {
            l_arr_DataColumn1_Positions.AddAsLast(file_RunData_DB_SiteID);
          }
          else
          {
            l_arr_DataColumn1_Positions.AddAsLast(file_RunData_DB_PositionID);
          }
          l_int_ReturnSearch_RGT = StrFind(i_str_CarrierID, Translate("RGT"));
          if (l_int_ReturnSearch_RGT >= 0)
          {
            _GenerateString(file_RunData_DB_TotalVolume, l_str_RunData_DB_TotalVolume);
            l_arr_DataColumn2_QuantityVolumes.AddAsLast(l_str_RunData_DB_TotalVolume);
          }
          else
          {
            _ConvertValueToString(file_RunData_DB_Units, l_str_RunData_DB_Units);
            l_arr_DataColumn2_QuantityVolumes.AddAsLast(l_str_RunData_DB_Units);
          }
          l_arr_DataColumn3_Descriptions.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
        }
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
      l_int_LengthString = StrGetLength(l_str_PLT_1000TIP_Positions);
      l_int_LengthString = l_int_LengthString - 1;
      l_str_PLT_1000TIP_Positions = StrLeft(l_str_PLT_1000TIP_Positions, l_int_LengthString);
      Util2::Debug::TraceArray(Translate("l_arr_DataColumn1_Positions: "), l_arr_DataColumn1_Positions);
      Util2::Debug::TraceArray(Translate("l_arr_DataColumn2_QuantityVolumes: "), l_arr_DataColumn2_QuantityVolumes);
      Util2::Debug::TraceArray(Translate("l_arr_DataColumn3_Descriptions: "), l_arr_DataColumn3_Descriptions);
      _SortElements(l_arr_DataColumn1_Positions, l_arr_DataColumn2_QuantityVolumes, l_arr_DataColumn3_Descriptions, 1);
      if (i_bln_LoadCarrierOnly_NoDialogs == ASWGLOBAL::BOOL::FALSE)
      {
        _Display_LoadCarrier_Dialog(i_str_MainImageName, i_str_SubImageName, Translate(""), l_arr_DataColumn1_Positions, l_arr_DataColumn2_QuantityVolumes, l_arr_DataColumn3_Descriptions);
        l_intReturnValueFindSubString = StrFind(i_str_CarrierID, Translate("TIP"));
        if (l_intReturnValueFindSubString < 0)
        {
          l_intReturnValueFindSubString = StrFind(i_str_CarrierID, Translate("Tip"));
        }
        if (l_intReturnValueFindSubString >= 0)
        {
          MECC::TraceComment(Translate("Substring \"Tip\" found within Carrier ID to be loaded"));
          l_intSizeArrayDescriptions=l_arr_DataColumn3_Descriptions.GetSize();
          l_intReturnValueFindSubString50 = -1;
          l_intReturnValueFindSubString300 = -1;
          l_intReturnValueFindSubString1000 = -1;
          {
            for(loopCounter3 = 0; loopCounter3 < l_intSizeArrayDescriptions;)
            {
              loopCounter3 = loopCounter3 + 1;
              l_strGetArrayDescription=l_arr_DataColumn3_Descriptions.GetAt(loopCounter3-1);
              Trace ("l_strGetArrayDescription: ", l_strGetArrayDescription);
              if (l_intReturnValueFindSubString50 < 0)
              {
                l_intReturnValueFindSubString50 = StrFind(l_strGetArrayDescription, ARW_Global::LabwareType::TIP50);
              }
              if (l_intReturnValueFindSubString300 < 0)
              {
                l_intReturnValueFindSubString300 = StrFind(l_strGetArrayDescription, ARW_Global::LabwareType::TIP300);
              }
              if (l_intReturnValueFindSubString1000 < 0)
              {
                l_intReturnValueFindSubString1000 = StrFind(l_strGetArrayDescription, ARW_Global::LabwareType::TIP1000);
              }
            }
          }
          Trace ("l_intReturnValueFindSubString50: ", l_intReturnValueFindSubString50);
          Trace ("l_intReturnValueFindSubString300: ", l_intReturnValueFindSubString300);
          Trace ("l_intReturnValueFindSubString1000: ", l_intReturnValueFindSubString1000);
          if (l_intReturnValueFindSubString50 >= 0)
          {
            l_int_TipType = 1;
            if(0){
              DATA_TipCounterRead(ML_STAR, file_RunData_DB_Units, file_RunData_DB_Units, file_RunData_DB_Units, l_int_TipType, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
            }
            DATA_TipCounterRead_CustomTips(ML_STAR, g_int_TotalNumberOf50Tips, 0, 0, l_int_TipType, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
            DATA_TipCounterWrite(ML_STAR);
          }
          else
          {
          }
          if (l_intReturnValueFindSubString300 >= 0)
          {
            l_int_TipType = 2;
            if(0){
              DATA_TipCounterRead(ML_STAR, file_RunData_DB_Units, file_RunData_DB_Units, file_RunData_DB_Units, l_int_TipType, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
            }
            DATA_TipCounterRead_CustomTips(ML_STAR, 0, g_int_TotalNumberOf300Tips, 0, l_int_TipType, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
            DATA_TipCounterWrite(ML_STAR);
          }
          else
          {
          }
          if (l_intReturnValueFindSubString1000 >= 0)
          {
            l_int_TipType = 3;
            if(0){
              DATA_TipCounterRead(ML_STAR, file_RunData_DB_Units, file_RunData_DB_Units, file_RunData_DB_Units, l_int_TipType, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
            }
            DATA_TipCounterRead_CustomTips(ML_STAR, 0, 0, g_int_TotalNumberOf1000Tips, l_int_TipType, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
            DATA_TipCounterWrite(ML_STAR);
          }
          else
          {
          }
          if(0){
            DATA_TipCounterRead(ML_STAR, file_RunData_DB_Units, file_RunData_DB_Units, file_RunData_DB_Units, l_int_TipType, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
            DATA_TipCounterWrite(ML_STAR);
          }
        }
      }
      if (i_bln_SkipLoadingRoutine != ASWGLOBAL::BOOL::TRUE)
      {
        if (i_bln_IsItLoadable == ASWGLOBAL::BOOL::TRUE)
        {
          Trace("Carrier ID to be loaded:", i_str_CarrierID);
          if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
          {
            {
              loopCounter1 = 0;
              while (1 == 1)
              {
                loopCounter1 = loopCounter1 + 1;
                onerror goto errLabel_11 ;
                err.Clear();
                ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                break;
                errLabel_11 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
                  l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
                  _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
                }   /* end if from skip handler if no error */
              }
            }
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
          if (l_intReturnValueFindSubString_TIP_50F >= 0)
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
            }
            if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
              }
            }
          }
          else
          {
            if (l_intReturnValueFindSubString_TIP_300F >= 0)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
              }
              if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
                }
              }
            }
            else
            {
              if (i_str_CarrierID == ARW_Global::CarrierType::PLT_TIP1000)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
                }
              }
            }
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        }
      }
      return (ASWGLOBAL::BOOL::TRUE);
      if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
      {
        {
          loopCounter1 = 0;
          while (1 == 1)
          {
            loopCounter1 = loopCounter1 + 1;
            onerror goto errLabel_12 ;
            err.Clear();
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            break;
            errLabel_12 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
              l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            }   /* end if from skip handler if no error */
          }
        }
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    else
    {
      MECC::TraceComment(Translate("Carrier ID not found withing ARW list (HSL file) --> no loading will be performed!\nHint : If you want to use this command with a new carrier : update first your HSL file..."));
    }
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  private function _Display_LoadCarrier_Dialog( variable i_str_ImagePath, variable i_str_SmallImagePath, variable i_str_TextTop, variable & i_arr_DataColumn1[], variable & i_arr_DataColumn2[], variable & i_arr_DataColumn3[] ) void {
    private variable l_str_LoadingPicturesFileDirectoryAndSmallImageName;
    private variable l_str_LoadingPicturesFileDirectoryAndImageName;
    private variable l_intReturnDisplayDialog;
    private variable l_arr_ColumnHeaders[];
    _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
    l_arr_ColumnHeaders.SetSize(0);
    l_arr_ColumnHeaders.AddAsLast(Translate("Position"));
    l_arr_ColumnHeaders.AddAsLast(Translate("Quantity"));
    l_arr_ColumnHeaders.AddAsLast(Translate("Description"));
    l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialogSetResources(l_arr_ColumnHeaders);
    _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
    l_str_LoadingPicturesFileDirectoryAndImageName = StrConcat12(t_str_LoadingPicturesFileDirectory, Translate(""), i_str_ImagePath, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    l_str_LoadingPicturesFileDirectoryAndSmallImageName = StrConcat12(t_str_LoadingPicturesFileDirectory, Translate(""), i_str_SmallImagePath, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Trace("l_str_LoadingPicturesFileDirectoryAndSmallImageName is: ",l_str_LoadingPicturesFileDirectoryAndSmallImageName);
    if (i_str_SmallImagePath == "")
    {
      l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, i_str_TextTop, Translate("Press OK to Continue, Cancel to Abort"), l_str_LoadingPicturesFileDirectoryAndImageName, Translate(""), 0, i_arr_DataColumn1, i_arr_DataColumn2, i_arr_DataColumn3);
    }
    else
    {
      l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, i_str_TextTop, Translate("Press OK to Continue, Cancel to Abort"), l_str_LoadingPicturesFileDirectoryAndImageName, l_str_LoadingPicturesFileDirectoryAndSmallImageName, 0, i_arr_DataColumn1, i_arr_DataColumn2, i_arr_DataColumn3);
    }
    _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
    if (l_intReturnDisplayDialog == 2)
    {
      abort;
    }
  }

  function CUSTOMIZED_Read_InputWorklist_ExcelOrCSVFormat_QIAseqRNAFusionXPPanels( variable i_strSamplePlateFile, sequence i_seqSourceALPTemplate, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & o_arrListOfIndexSet[], variable & o_arrIndexSet[], variable & o_arrNumberIndexSet[], variable & o_arrIndexSeqPositions[], variable & o_arrIndexIDs[], variable & o_arrListOfPanelIDs[], variable & o_arrPanelSeqPositions[], variable & o_arrPanelIDs[], variable & o_arrNumberPanelIDs[], variable & o_intNumberOfPanels, variable & o_arrALPseqLabID[], variable & o_arrALPseqPositions[], variable & o_strIndexLabwareFormat ) void {
    private variable l_strSeqPositionToSet;
    private variable l_strPanelIDDelete;
    private variable l_fileInputWkl_Sample_ID;
    private variable l_intCountNumberOfSamplesFromFile;
    private variable l_strAllIndexSet;
    private variable l_intPanelToSearchFor;
    private variable l_intNumberActualIndexSet;
    private variable l_intReturnFromArray;
    private variable l_intSizeArrIndex1Positions;
    private variable l_fileInputWkl_Index_ID;
    private variable l_intCountRows;
    private variable l_strPanelIDCheck;
    private variable l_fileInputWkl_Panel_ID;
    private variable l_intSizeArrIndex2Positions;
    private variable l_fileInputWkl_Index_Set;
    private variable l_strIndexSetDelete;
    private variable l_strAllPanelID;
    private variable l_intReturnDisplayDialog;
    private variable l_intCountWorkListLinesTrace;
    private variable l_intSeqPositionToSet;
    private variable loopCounter1;
    private variable l_fileInputWkl_Index_Pos;
    private variable loopCounter2;
    private variable l_fileInputWkl_Sample_Position;
    private variable l_strPanelID;
    private variable l_strCoordinate;
    private variable l_intNumberActualPanelID;
    private variable l_intIndex1stSeparator;
    private variable l_blnPositionFound;
    private variable l_strActualPanelID;
    private variable l_intCountColumns;
    private variable l_strActualIndexSet;
    private variable l_strFileTypeExtension;
    private variable l_strTempLabIDSrcSeq;
    private variable l_intCountWorkListLines;
    private variable l_strDisplayTextToStatusWindow;
    private file l_hdlFileInputWorkList;
    private variable io_arrSampleSeqPositions[];
    private variable l_arr_strCoordinateLetter[];
    private variable l_arr_strCoordinates[];
    private variable io_arrSampleID[];
    o_intNumberOfSamples = 0;
    o_intIndexesUsedSetting = 0;
    o_intNumberOfPanels = 0;
    o_strIndexLabwareFormat = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  CUSTOMIZED_Read_InputWorklist_ExcelOrCSVFormat_QIAseqRNAFusionXPPanels <<<<<<<<<<"));
    _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
    i_seqSourceALPTemplate.SetCurrentPosition(1);
    l_strTempLabIDSrcSeq = SeqGetLabwareId(i_seqSourceALPTemplate);
    io_arrSampleID.SetSize(0);
    io_arrSampleSeqPositions.SetSize(0);
    l_strAllPanelID = Translate("");
    l_strAllIndexSet = Translate("");
    l_strFileTypeExtension = HSLExtensions::File::GetFileExtension(i_strSamplePlateFile);
    l_strDisplayTextToStatusWindow = StrConcat2(Translate("Read input worklist : "), i_strSamplePlateFile);
    l_intReturnDisplayDialog = VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
    if (l_strFileTypeExtension == "csv")
    {
      onerror goto errLabel_13 ;
      err.Clear();
      l_hdlFileInputWorkList.AddField("Sample_ID", l_fileInputWkl_Sample_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Sample_Position", l_fileInputWkl_Sample_Position, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index_Set", l_fileInputWkl_Index_Set, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index_ID", l_fileInputWkl_Index_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index_Pos", l_fileInputWkl_Index_Pos, hslString, 255);
      l_hdlFileInputWorkList.AddField("Panel_ID", l_fileInputWkl_Panel_ID, hslString, 255);
      l_hdlFileInputWorkList.SetDelimiter(";");
      if( 0 == l_hdlFileInputWorkList.Open(i_strSamplePlateFile, hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strSamplePlateFile, "HxMetEdCompCmd");
      }
      errLabel_13 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        Display_Error_Dialog(Translate("Protocol cannot open Input Worklist (CSV format). Please review file structure and content. System will abort"));
      }   /* end if from skip handler if no error */
    }
    if (l_strFileTypeExtension == "xls")
    {
      onerror goto errLabel_14 ;
      err.Clear();
      l_hdlFileInputWorkList.AddField("Sample_ID", l_fileInputWkl_Sample_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Sample_Position", l_fileInputWkl_Sample_Position, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index_Set", l_fileInputWkl_Index_Set, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index_ID", l_fileInputWkl_Index_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index_Pos", l_fileInputWkl_Index_Pos, hslString, 255);
      l_hdlFileInputWorkList.AddField("Panel_ID", l_fileInputWkl_Panel_ID, hslString, 255);
      if( 0 == l_hdlFileInputWorkList.Open(i_strSamplePlateFile + " " + "Sheet1$", hslRead, "Select * from [Sheet1$] where [Sample_Position] is not null") )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strSamplePlateFile, "HxMetEdCompCmd");
      }
      errLabel_14 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        Display_Error_Dialog(Translate("Protocol cannot open Input Worklist (XLS format). Please review file structure and content. System will abort"));
      }   /* end if from skip handler if no error */
    }
    if (l_strFileTypeExtension != "xls")
    {
      if (l_strFileTypeExtension != "csv")
      {
        Display_Error_Dialog(Translate("Protocol cannot open Input Worklist (Not supported format). Please review file structure and content. System will abort"));
      }
    }
    {
      l_intCountWorkListLines = 0;
      while (
         (l_hdlFileInputWorkList.Eof() == 0)
      )
      {
        l_intCountWorkListLines = l_intCountWorkListLines + 1;
        l_intCountWorkListLinesTrace = l_intCountWorkListLines;
        if( 0 == l_hdlFileInputWorkList.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (l_fileInputWkl_Sample_Position != "")
        {
          io_arrSampleID.AddAsLast(l_fileInputWkl_Sample_ID);
          o_arrALPseqLabID.AddAsLast(l_strTempLabIDSrcSeq);
          o_arrALPseqPositions.AddAsLast(l_fileInputWkl_Sample_Position);
          o_arrIndexSet.AddAsLast(l_fileInputWkl_Index_Set);
          o_arrIndexSeqPositions.AddAsLast(l_fileInputWkl_Index_Pos);
          o_arrIndexIDs.AddAsLast(l_fileInputWkl_Index_ID);
          o_arrPanelIDs.AddAsLast(l_fileInputWkl_Panel_ID);
          l_strAllPanelID = l_strAllPanelID + l_fileInputWkl_Panel_ID;
          l_strAllIndexSet = l_strAllIndexSet + l_fileInputWkl_Index_Set;
          l_strAllPanelID = StrConcat2(l_strAllPanelID, Translate(","));
          l_strAllIndexSet = StrConcat2(l_strAllIndexSet, Translate(","));
        }
      }
    }
    {
      loopCounter1 = 0;
      while (1 == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        l_intIndex1stSeparator = StrFind(l_strAllPanelID, Translate(","));
        l_strActualPanelID = StrLeft(l_strAllPanelID, l_intIndex1stSeparator);
        o_arrListOfPanelIDs.AddAsLast(l_strActualPanelID);
        l_strPanelIDDelete = StrConcat2(l_strActualPanelID, Translate(","));
        l_intNumberActualPanelID = StrReplace(l_strAllPanelID, l_strPanelIDDelete, Translate(""));
        o_arrNumberPanelIDs.AddAsLast(l_intNumberActualPanelID);
        if (l_strAllPanelID == "")
        {
          break;
        }
      }
    }
    o_intNumberOfSamples=io_arrSampleID.GetSize();
    o_intNumberOfPanels=o_arrPanelIDs.GetSize();
    {
      for(l_intCountNumberOfSamplesFromFile = 0; l_intCountNumberOfSamplesFromFile < o_intNumberOfSamples;)
      {
        l_intCountNumberOfSamplesFromFile = l_intCountNumberOfSamplesFromFile + 1;
        l_intSeqPositionToSet = 1;
        l_strPanelID=o_arrPanelIDs.GetAt(l_intCountNumberOfSamplesFromFile-1);
        {
          for(l_intPanelToSearchFor = 0; l_intPanelToSearchFor < o_intNumberOfPanels;)
          {
            l_intPanelToSearchFor = l_intPanelToSearchFor + 1;
            l_strPanelIDCheck=o_arrListOfPanelIDs.GetAt(l_intPanelToSearchFor-1);
            if (l_strPanelID == l_strPanelIDCheck)
            {
              l_strSeqPositionToSet = StrIStr(l_intSeqPositionToSet);
              o_arrPanelSeqPositions.AddAsLast(l_strSeqPositionToSet);
              break;
            }
            l_intSeqPositionToSet = l_intSeqPositionToSet + 1;
          }
        }
      }
    }
    {
      loopCounter2 = 0;
      while (1 == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        l_intIndex1stSeparator = StrFind(l_strAllIndexSet, Translate(","));
        l_strActualIndexSet = StrLeft(l_strAllIndexSet, l_intIndex1stSeparator);
        o_arrListOfIndexSet.AddAsLast(l_strActualIndexSet);
        l_strIndexSetDelete = StrConcat2(l_strActualIndexSet, Translate(","));
        l_intNumberActualIndexSet = StrReplace(l_strAllIndexSet, l_strIndexSetDelete, Translate(""));
        o_arrNumberIndexSet.AddAsLast(l_intNumberActualIndexSet);
        if (l_strAllIndexSet == "")
        {
          break;
        }
      }
    }
    APPSLIB::TraceValues(Translate("Records in Excel File: "), l_intCountWorkListLinesTrace, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Util2::Debug::TraceArray_2(Translate("List of Panel IDs and Number per Panel ID"), o_arrListOfPanelIDs, o_arrNumberPanelIDs);
    Util2::Debug::TraceArray_2(Translate("Arrays of Index Sets and Numbers of Index Set"), o_arrListOfIndexSet, o_arrNumberIndexSet);
    Util2::Debug::TraceArray_4(Translate("Arrays of ID and position ID for Samples and Panels"), io_arrSampleID, o_arrALPseqPositions, o_arrPanelIDs, o_arrPanelSeqPositions);
    Util2::Debug::TraceArray_3(Translate("Arrays of ID and position ID for Index Set und Indexes"), o_arrIndexSet, o_arrIndexIDs, o_arrIndexSeqPositions);
    l_arr_strCoordinateLetter.SetSize(0);
    l_arr_strCoordinateLetter.AddAsLast(Translate("A"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("B"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("C"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("D"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("E"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("F"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("G"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("H"));
    l_arr_strCoordinates.SetSize(0);
    {
      for(l_intCountColumns = 0; l_intCountColumns < 12;)
      {
        l_intCountColumns = l_intCountColumns + 1;
        {
          for(l_intCountRows = 0; l_intCountRows < 8;)
          {
            l_intCountRows = l_intCountRows + 1;
            l_strCoordinate = StrConcat2(l_arr_strCoordinateLetter.ElementAt( l_intCountRows -1), l_intCountColumns);
            l_arr_strCoordinates.AddAsLast(l_strCoordinate);
          }
        }
      }
    }
    l_blnPositionFound = APPSLIB::ArrayLookup(l_arr_strCoordinates, o_arrIndexSeqPositions.ElementAt( 1 -1), l_intReturnFromArray);
    if (l_blnPositionFound == ASWGLOBAL::BOOL::TRUE)
    {
      o_strIndexLabwareFormat = Translate("plate");
    }
    else
    {
      o_strIndexLabwareFormat = Translate("tube");
    }
    o_intNumberOfSamples=io_arrSampleID.GetSize();
    o_intNumberOfPanels=o_arrListOfPanelIDs.GetSize();
    o_intIndexesUsedSetting=o_arrListOfIndexSet.GetSize();
    if(0){
      l_intSizeArrIndex1Positions=o_arrIndexSeqPositions.GetSize();
      if (l_intSizeArrIndex2Positions != 0)
      {
        o_intIndexesUsedSetting = 2;
      }
      else
      {
        if (l_intSizeArrIndex1Positions == 0)
        {
          o_intIndexesUsedSetting = 0;
        }
        else
        {
          o_intIndexesUsedSetting = 1;
        }
      }
    }
    if( 0 != l_hdlFileInputWorkList.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlFileInputWorkList.RemoveFields();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: CUSTOMIZED_Read_InputWorklist_ExcelOrCSVFormat_QIAseqRNAFusionXPPanels <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function Read_InputWorklist_ExcelOrCSVFormat_QIAseqTargetedDNAProPanel_backUp( variable i_strSamplePlateFile, sequence i_seqSourceALPTemplate, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & o_arrListOfIndexSet[], variable & o_arrIndexSet[], variable & o_arrNumberIndexSet[], variable & o_arrIndex1SeqPositions[], variable & o_arrIndex1IDs[], variable & o_arrIndex2SeqPositions[], variable & o_arrIndex2IDs[], variable & o_arrListOfPanelIDs[], variable & o_arrPanelSeqPositions[], variable & o_arrPanelIDs[], variable & o_arrNumberPanelIDs[], variable & o_intNumberOfPanels, variable & o_arrALPseqLabID[], variable & o_arrALPseqPositions[], variable & o_strIndexLabwareFormat ) void {
    private dialog dialogHandle_15;
    private variable l_strSeqPositionToSet;
    private variable l_strPanelIDDelete;
    private variable l_fileInputWkl_Sample_ID;
    private variable l_intCountNumberOfSamplesFromFile;
    private variable l_strAllIndexSet;
    private variable l_intNumberActualIndexSet;
    private variable l_intPanelToSearchFor;
    private variable l_intSizeIndexPositions;
    private variable l_intReturnFromArray;
    private variable l_intSizeArrIndex1Positions;
    private variable l_intCountIndexPositions;
    private variable l_fileInputWkl_Index_ID;
    private variable l_strPanelIDCheck;
    private variable l_fileInputWkl_Panel_ID;
    private variable l_intCountRows;
    private variable l_intSizeArrIndex2Positions;
    private variable l_fileInputWkl_Index_Set;
    private variable l_strIndexSetDelete;
    private variable l_intReturnDisplayDialog;
    private variable l_strAllPanelID;
    private variable loopCounter1;
    private variable l_intSeqPositionToSet;
    private variable l_fileInputWkl_Index_Pos;
    private variable l_intCountWorkListLinesTrace;
    private variable loopCounter2;
    private variable l_fileInputWkl_Sample_Position;
    private variable l_strIndexSet1;
    private variable l_strPanelID;
    private variable l_strActualPanelID;
    private variable l_intNumberActualPanelID;
    private variable l_intIndex1stSeparator;
    private variable l_blnPositionFound;
    private variable l_strCoordinate;
    private variable l_strFileTypeExtension;
    private variable l_strActualIndexSet;
    private variable l_intCountColumns;
    private variable l_strTempLabIDSrcSeq;
    private variable l_strDisplayTextToStatusWindow;
    private variable l_intCountWorkListLines;
    private file l_hdlFileInputWorkList;
    private variable io_arrSampleSeqPositions[];
    private variable l_arr_strCoordinateLetter[];
    private variable l_arr_strCoordinates[];
    private variable io_arrSampleID[];
    private variable io_arrIndexPositions[];
    private variable io_arrIndexID[];
    o_intNumberOfSamples = 0;
    o_intIndexesUsedSetting = 0;
    o_intNumberOfPanels = 0;
    o_strIndexLabwareFormat = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_ReadInputWorklistExcelFormat <<<<<<<<<<"));
    _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
    i_seqSourceALPTemplate.SetCurrentPosition(1);
    l_strTempLabIDSrcSeq = SeqGetLabwareId(i_seqSourceALPTemplate);
    io_arrSampleID.SetSize(0);
    io_arrSampleSeqPositions.SetSize(0);
    io_arrIndexID.SetSize(0);
    io_arrIndexPositions.SetSize(0);
    l_strAllPanelID = Translate("");
    l_strAllIndexSet = Translate("");
    l_strFileTypeExtension = HSLExtensions::File::GetFileExtension(i_strSamplePlateFile);
    l_strDisplayTextToStatusWindow = StrConcat2(Translate("Read input worklist : "), i_strSamplePlateFile);
    l_intReturnDisplayDialog = VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
    if (l_strFileTypeExtension == "csv")
    {
      onerror goto errLabel_16 ;
      err.Clear();
      l_hdlFileInputWorkList.AddField("Sample_ID", l_fileInputWkl_Sample_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Sample_Position", l_fileInputWkl_Sample_Position, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index_Set", l_fileInputWkl_Index_Set, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index_ID", l_fileInputWkl_Index_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index_Pos", l_fileInputWkl_Index_Pos, hslString, 255);
      l_hdlFileInputWorkList.AddField("Panel_ID", l_fileInputWkl_Panel_ID, hslString, 255);
      l_hdlFileInputWorkList.SetDelimiter(";");
      if( 0 == l_hdlFileInputWorkList.Open(i_strSamplePlateFile, hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strSamplePlateFile, "HxMetEdCompCmd");
      }
      errLabel_16 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        Display_Error_Dialog(Translate("Protocol cannot open Input Worklist (CSV format). Please review file structure and content. System will abort"));
      }   /* end if from skip handler if no error */
    }
    if (l_strFileTypeExtension == "xls")
    {
      onerror goto errLabel_17 ;
      err.Clear();
      l_hdlFileInputWorkList.AddField("Sample_ID", l_fileInputWkl_Sample_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Sample_Position", l_fileInputWkl_Sample_Position, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index_Set", l_fileInputWkl_Index_Set, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index_ID", l_fileInputWkl_Index_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index_Pos", l_fileInputWkl_Index_Pos, hslString, 255);
      l_hdlFileInputWorkList.AddField("Panel_ID", l_fileInputWkl_Panel_ID, hslString, 255);
      if( 0 == l_hdlFileInputWorkList.Open(i_strSamplePlateFile + " " + "Sheet1$", hslRead, "Select * from [Sheet1$] where [Sample_Position] is not null") )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strSamplePlateFile, "HxMetEdCompCmd");
      }
      errLabel_17 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        Display_Error_Dialog(Translate("Protocol cannot open Input Worklist (XLS format). Please review file structure and content. System will abort"));
      }   /* end if from skip handler if no error */
    }
    if (l_strFileTypeExtension != "xls")
    {
      if (l_strFileTypeExtension != "csv")
      {
        Display_Error_Dialog(Translate("Protocol cannot open Input Worklist (Not supported format). Please review file structure and content. System will abort"));
      }
    }
    {
      l_intCountWorkListLines = 0;
      while (
         (l_hdlFileInputWorkList.Eof() == 0)
      )
      {
        l_intCountWorkListLines = l_intCountWorkListLines + 1;
        l_intCountWorkListLinesTrace = l_intCountWorkListLines;
        if( 0 == l_hdlFileInputWorkList.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (l_fileInputWkl_Sample_Position != "")
        {
          io_arrSampleID.AddAsLast(l_fileInputWkl_Sample_ID);
          o_arrALPseqLabID.AddAsLast(l_strTempLabIDSrcSeq);
          o_arrALPseqPositions.AddAsLast(l_fileInputWkl_Sample_Position);
          o_arrIndexSet.AddAsLast(l_fileInputWkl_Index_Set);
          io_arrIndexPositions.AddAsLast(l_fileInputWkl_Index_Pos);
          io_arrIndexID.AddAsLast(l_fileInputWkl_Index_ID);
          o_arrPanelIDs.AddAsLast(l_fileInputWkl_Panel_ID);
          l_strAllPanelID = l_strAllPanelID + l_fileInputWkl_Panel_ID;
          l_strAllIndexSet = l_strAllIndexSet + l_fileInputWkl_Index_Set;
          l_strAllPanelID = StrConcat2(l_strAllPanelID, Translate(","));
          l_strAllIndexSet = StrConcat2(l_strAllIndexSet, Translate(","));
        }
      }
    }
    {
      loopCounter1 = 0;
      while (1 == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        l_intIndex1stSeparator = StrFind(l_strAllPanelID, Translate(","));
        l_strActualPanelID = StrLeft(l_strAllPanelID, l_intIndex1stSeparator);
        o_arrListOfPanelIDs.AddAsLast(l_strActualPanelID);
        l_strPanelIDDelete = StrConcat2(l_strActualPanelID, Translate(","));
        l_intNumberActualPanelID = StrReplace(l_strAllPanelID, l_strPanelIDDelete, Translate(""));
        o_arrNumberPanelIDs.AddAsLast(l_intNumberActualPanelID);
        if (l_strAllPanelID == "")
        {
          break;
        }
      }
    }
    o_intNumberOfSamples=io_arrSampleID.GetSize();
    o_intNumberOfPanels=o_arrPanelIDs.GetSize();
    {
      for(l_intCountNumberOfSamplesFromFile = 0; l_intCountNumberOfSamplesFromFile < o_intNumberOfSamples;)
      {
        l_intCountNumberOfSamplesFromFile = l_intCountNumberOfSamplesFromFile + 1;
        l_intSeqPositionToSet = 1;
        l_strPanelID=o_arrPanelIDs.GetAt(l_intCountNumberOfSamplesFromFile-1);
        {
          for(l_intPanelToSearchFor = 0; l_intPanelToSearchFor < o_intNumberOfPanels;)
          {
            l_intPanelToSearchFor = l_intPanelToSearchFor + 1;
            l_strPanelIDCheck=o_arrListOfPanelIDs.GetAt(l_intPanelToSearchFor-1);
            if (l_strPanelID == l_strPanelIDCheck)
            {
              l_strSeqPositionToSet = StrIStr(l_intSeqPositionToSet);
              o_arrPanelSeqPositions.AddAsLast(l_strSeqPositionToSet);
              break;
            }
            l_intSeqPositionToSet = l_intSeqPositionToSet + 1;
          }
        }
      }
    }
    {
      loopCounter2 = 0;
      while (1 == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        l_intIndex1stSeparator = StrFind(l_strAllIndexSet, Translate(","));
        l_strActualIndexSet = StrLeft(l_strAllIndexSet, l_intIndex1stSeparator);
        o_arrListOfIndexSet.AddAsLast(l_strActualIndexSet);
        l_strIndexSetDelete = StrConcat2(l_strActualIndexSet, Translate(","));
        l_intNumberActualIndexSet = StrReplace(l_strAllIndexSet, l_strIndexSetDelete, Translate(""));
        o_arrNumberIndexSet.AddAsLast(l_intNumberActualIndexSet);
        if (l_strAllIndexSet == "")
        {
          break;
        }
      }
    }
    l_strIndexSet1=o_arrListOfIndexSet.GetAt(1-1);
    l_intSizeIndexPositions=io_arrIndexPositions.GetSize();
    {
      for(l_intCountIndexPositions = 0; l_intCountIndexPositions < l_intSizeIndexPositions;)
      {
        l_intCountIndexPositions = l_intCountIndexPositions + 1;
        if (o_arrIndexSet.ElementAt( l_intCountIndexPositions -1) == l_strIndexSet1)
        {
          o_arrIndex1IDs.AddAsLast(io_arrIndexID.ElementAt( l_intCountIndexPositions -1));
          o_arrIndex1SeqPositions.AddAsLast(io_arrIndexPositions.ElementAt( l_intCountIndexPositions -1));
        }
        else
        {
          o_arrIndex2IDs.AddAsLast(io_arrIndexID.ElementAt( l_intCountIndexPositions -1));
          o_arrIndex2SeqPositions.AddAsLast(io_arrIndexPositions.ElementAt( l_intCountIndexPositions -1));
        }
      }
    }
    if(0){
      {
        l_intCountWorkListLines = 0;
        while (
           (l_hdlFileInputWorkList.Eof() == 0)
        )
        {
          l_intCountWorkListLines = l_intCountWorkListLines + 1;
          if( 0 == l_hdlFileInputWorkList.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if (l_fileInputWkl_Sample_Position != "")
          {
            if (l_fileInputWkl_Index_Set == l_strIndexSet1)
            {
              o_arrIndex1IDs.AddAsLast(l_fileInputWkl_Index_ID);
              o_arrIndex1SeqPositions.AddAsLast(l_fileInputWkl_Index_Pos);
            }
            else
            {
              o_arrIndex2IDs.AddAsLast(l_fileInputWkl_Index_ID);
              o_arrIndex2SeqPositions.AddAsLast(l_fileInputWkl_Index_Pos);
            }
          }
        }
      }
    }
    APPSLIB::TraceValues(Translate("Records in Excel File: "), l_intCountWorkListLinesTrace, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Util2::Debug::TraceArray_2(Translate("List of Panel IDs and Number per Panel ID"), o_arrListOfPanelIDs, o_arrNumberPanelIDs);
    Util2::Debug::TraceArray_2(Translate("Arrays of Index Sets and Numbers of Index Set"), o_arrListOfIndexSet, o_arrNumberIndexSet);
    Util2::Debug::TraceArray_4(Translate("Arrays of ID and position ID for Samples and Panels"), io_arrSampleID, o_arrALPseqPositions, o_arrPanelIDs, o_arrPanelSeqPositions);
    Util2::Debug::TraceArray(Translate("Arrays of ID for Index Set"), o_arrIndexSet);
    Util2::Debug::TraceArray_4(Translate("Arrays of ID and position ID for Indexes"), o_arrIndex1IDs, o_arrIndex1SeqPositions, o_arrIndex2IDs, o_arrIndex2SeqPositions);
    dialogHandle_15.SetOutput(Translate("!!!"));
    dialogHandle_15.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    l_arr_strCoordinateLetter.SetSize(0);
    l_arr_strCoordinateLetter.AddAsLast(Translate("A"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("B"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("C"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("D"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("E"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("F"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("G"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("H"));
    l_arr_strCoordinates.SetSize(0);
    {
      for(l_intCountColumns = 0; l_intCountColumns < 12;)
      {
        l_intCountColumns = l_intCountColumns + 1;
        {
          for(l_intCountRows = 0; l_intCountRows < 8;)
          {
            l_intCountRows = l_intCountRows + 1;
            l_strCoordinate = StrConcat2(l_arr_strCoordinateLetter.ElementAt( l_intCountRows -1), l_intCountColumns);
            l_arr_strCoordinates.AddAsLast(l_strCoordinate);
          }
        }
      }
    }
    l_blnPositionFound = APPSLIB::ArrayLookup(l_arr_strCoordinates, o_arrIndex1SeqPositions.ElementAt( 1 -1), l_intReturnFromArray);
    if (l_blnPositionFound == ASWGLOBAL::BOOL::TRUE)
    {
      o_strIndexLabwareFormat = Translate("plate");
    }
    else
    {
      o_strIndexLabwareFormat = Translate("tube");
    }
    o_intNumberOfSamples=io_arrSampleID.GetSize();
    l_intSizeArrIndex1Positions=o_arrIndex1SeqPositions.GetSize();
    l_intSizeArrIndex2Positions=o_arrIndex2SeqPositions.GetSize();
    o_intNumberOfPanels=o_arrListOfPanelIDs.GetSize();
    if (l_intSizeArrIndex2Positions != 0)
    {
      o_intIndexesUsedSetting = 2;
    }
    else
    {
      if (l_intSizeArrIndex1Positions == 0)
      {
        o_intIndexesUsedSetting = 0;
      }
      else
      {
        o_intIndexesUsedSetting = 1;
      }
    }
    if( 0 != l_hdlFileInputWorkList.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlFileInputWorkList.RemoveFields();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: DATA_ReadSamplePlateFile <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function Add_LabwareForCurrentProcess_MOA( device & ML_STAR, variable i_str_LabwareType, variable i_str_LabwareName, variable i_int_NumberOfUnits, sequence & i_seq_Template, variable i_var_PositionInSequence ) void {
    private variable l_intReturnValueFindSubString;
    private variable l_str_LabwareId_SeqTemplate;
    private variable l_int_ReturnSearch_TubeCarriers;
    private variable l_str_ConcatLabwareTypeAndName;
    private variable l_str_CarrierID;
    private variable l_str_SiteID_long;
    private variable l_intReturnValueFindSubString_PLT_TIP1000;
    private variable l_int_NumberOfTubePositionsDetected;
    private variable l_int_RecordCounter;
    private variable l_str_sequenceName;
    private variable l_int_NumberOfLabwareIds;
    private variable l_str_SiteID;
    private variable l_int_NumberOfCarriers;
    private variable loopCounter1;
    private variable l_str_SQLSentence;
    private variable loopCounter2;
    private variable l_str_PositionIDs_Sorted;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable l_int_NumberOfSitesPerCarrier;
    private variable l_int_MaxNumberOfSites;
    private variable loopCounter5;
    private variable l_int_AdditionToUnits;
    private variable l_bln_ArraySorted;
    private variable l_arr_str_SortedPositions[];
    private variable l_arr_seqTemplateLabwareIds[];
    private variable l_arr_strTokens[];
    private variable l_arr_strSiteNamesForThisCarrier_Distinct[];
    private variable l_arr_strCarrierName_Distinct[];
    private variable l_arr_strSiteNames[];
    private variable l_arr_strSiteNamesForThisCarrier[];
    private variable l_arr_strCarrierName[];
    if (i_int_NumberOfUnits != 0)
    {
      l_str_SQLSentence = Translate("");
      _Reset_FileRunData_Variables();
      l_str_sequenceName = SeqGetName(i_seq_Template);
      l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_LabwareType] = '",i_str_LabwareType,"' AND [DB_ReagentName] = '",i_str_LabwareName,"' AND [DB_LabwareName] = '",l_str_sequenceName,"'","","","","","");
      Trace(l_str_SQLSentence);
      //l_str_SQLSentence = StrConcat12("","","","","","","","","","","","");
      l_int_RecordCounter = 0;
      l_int_AdditionToUnits = 0;
      file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
      file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
      file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
      file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
      file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
      file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
      file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
      file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
      file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
      file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
      file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
      file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
      file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
      file_RunData.AddField("DB_PrepareMastermixOnDeck", file_RunData_DB_PrepareMastermixOnDeck, hslInteger);
      file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, l_str_SQLSentence) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
      {
        loopCounter1 = 0;
        while (
           (file_RunData.Eof() == 0)
        )
        {
          loopCounter1 = loopCounter1 + 1;
          if( 0 == file_RunData.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_int_RecordCounter = l_int_RecordCounter + 1;
        }
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
      if (l_int_RecordCounter > 0)
      {
        MECC::TraceComment(Translate("These values ARE PRESENT in File"));
        l_int_AdditionToUnits = file_RunData_DB_Units + i_int_NumberOfUnits;
        l_str_LabwareId_SeqTemplate = SeqGetLabwareId(i_seq_Template);
        _GetCarrierIDandSiteID_FromLabID(ML_STAR, l_str_LabwareId_SeqTemplate, l_str_CarrierID, l_str_SiteID);
        l_int_ReturnSearch_TubeCarriers = StrFind(l_str_SiteID, Translate("T-"));
        if (l_int_ReturnSearch_TubeCarriers >= 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Searching for string T-  resulted TRUE"), Translate(""));
          file_RunData_DB_PositionID = StrConcat12(file_RunData_DB_PositionID, Translate(","), i_var_PositionInSequence, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_PositionID: "), file_RunData_DB_PositionID);
          STRTOKENIZE::StrTokenize(file_RunData_DB_PositionID, Translate(","), l_arr_strTokens, ASWGLOBAL::BOOL::FALSE);
          l_arr_str_SortedPositions = HSLExtensions::Array::Sort(l_arr_strTokens, 1, l_bln_ArraySorted);
          if (l_bln_ArraySorted == ASWGLOBAL::BOOL::TRUE)
          {
            l_str_PositionIDs_Sorted = Translate("");
            l_int_NumberOfTubePositionsDetected=l_arr_str_SortedPositions.GetSize();
            {
              for(loopCounter5 = 0; loopCounter5 < l_int_NumberOfTubePositionsDetected;)
              {
                loopCounter5 = loopCounter5 + 1;
                if (loopCounter5 == 1)
                {
                  l_str_PositionIDs_Sorted = StrConcat12(l_str_PositionIDs_Sorted, Translate(""), l_arr_str_SortedPositions.ElementAt( loopCounter5 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                }
                else
                {
                  l_str_PositionIDs_Sorted = StrConcat12(l_str_PositionIDs_Sorted, Translate(","), l_arr_str_SortedPositions.ElementAt( loopCounter5 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                }
              }
            }
          }
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_str_PositionIDs_Sorted: "), l_str_PositionIDs_Sorted);
          l_str_SQLSentence = StrConcat12("UPDATE [RunData$] SET [DB_Units] = ", l_int_AdditionToUnits,", [DB_PositionID] = '",l_str_PositionIDs_Sorted,"' WHERE [DB_LabwareType] = '",i_str_LabwareType,"' AND [DB_ReagentName] = '",i_str_LabwareName,"'","","","");
          Trace(l_str_SQLSentence);
          //l_str_SQLSentence = StrConcat12("","","","","","","","","","","","");
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Searching for string T-  resulted FALSE"), Translate(""));
          l_str_SQLSentence = StrConcat12("UPDATE [RunData$] SET [DB_Units] = ", l_int_AdditionToUnits," WHERE [DB_LabwareType] = '",i_str_LabwareType,"' AND [DB_ReagentName] = '",i_str_LabwareName,"'","","","","","");
          Trace(l_str_SQLSentence);
          //l_str_SQLSentence = StrConcat12("","","","","","","","","","","","");
        }
        file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
        file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
        file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
        file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
        file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
        file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
        file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
        file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
        file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
        file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
        file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
        file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
        file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
        file_RunData.AddField("DB_PrepareMastermixOnDeck", file_RunData_DB_PrepareMastermixOnDeck, hslInteger);
        file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
        if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, l_str_SQLSentence) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
        }
        if( 0 != file_RunData.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file_RunData.RemoveFields();
      }
      else
      {
        MECC::TraceComment(Translate("These values ARE NOT PRESENT in File"));
        _Reset_FileRunData_Variables();
        SeqGetLabwareIds(i_seq_Template, l_arr_seqTemplateLabwareIds);
        l_int_NumberOfLabwareIds=l_arr_seqTemplateLabwareIds.GetSize();
        l_arr_strCarrierName.SetSize(0);
        {
          for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfLabwareIds;)
          {
            loopCounter2 = loopCounter2 + 1;
            _GetCarrierIDandSiteID_FromLabID(ML_STAR, l_arr_seqTemplateLabwareIds.ElementAt( loopCounter2 -1), l_str_CarrierID, l_str_SiteID);
            l_arr_strCarrierName.AddAsLast(l_str_CarrierID);
            l_arr_strSiteNames.AddAsLast(l_str_SiteID);
            l_int_ReturnSearch_TubeCarriers = StrFind(l_str_SiteID, Translate("T-"));
          }
        }
        ARRAYTOOLS::get_distinct_from_array(l_arr_strCarrierName, l_arr_strCarrierName_Distinct);
        l_int_NumberOfCarriers=l_arr_strCarrierName_Distinct.GetSize();
        {
          for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfCarriers;)
          {
            loopCounter3 = loopCounter3 + 1;
            ARRAYTOOLS::ArrayVLookUp(l_arr_strSiteNames, l_arr_strCarrierName, l_arr_strCarrierName_Distinct.ElementAt( loopCounter3 -1), l_arr_strSiteNamesForThisCarrier);
            ARRAYTOOLS::get_distinct_from_array(l_arr_strSiteNamesForThisCarrier, l_arr_strSiteNamesForThisCarrier_Distinct);
            l_int_NumberOfSitesPerCarrier=l_arr_strSiteNamesForThisCarrier_Distinct.GetSize();
            file_RunData_DB_CarrierName = l_arr_strCarrierName_Distinct.ElementAt( loopCounter3 -1);
            file_RunData_DB_SiteID = l_arr_strSiteNamesForThisCarrier_Distinct.ElementAt( loopCounter3 -1);
            file_RunData_DB_ReagentType = Translate("LabwareResource");
            file_RunData_DB_LabwareType = i_str_LabwareType;
            file_RunData_DB_LabwareName = l_str_sequenceName;
            file_RunData_DB_ReagentName = i_str_LabwareName;
            if (i_str_LabwareType == i_str_LabwareName)
            {
              file_RunData_DB_ReagentNameANDLabwareType = i_str_LabwareName;
            }
            else
            {
              l_str_ConcatLabwareTypeAndName = StrConcat12(i_str_LabwareType, Translate(" ("), i_str_LabwareName, Translate(")"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              file_RunData_DB_ReagentNameANDLabwareType = l_str_ConcatLabwareTypeAndName;
            }
            file_RunData_DB_Units = i_int_NumberOfUnits;
            l_str_SiteID_long = Translate("");
            if (l_int_ReturnSearch_TubeCarriers >= 0)
            {
              file_RunData_DB_PositionID = i_var_PositionInSequence;
            }
            else
            {
              {
                for(loopCounter4 = 0; loopCounter4 < l_int_NumberOfSitesPerCarrier;)
                {
                  loopCounter4 = loopCounter4 + 1;
                  if (loopCounter4 == l_int_NumberOfSitesPerCarrier)
                  {
                    l_str_SiteID_long = StrConcat12(l_str_SiteID_long, l_arr_strSiteNamesForThisCarrier_Distinct.ElementAt( loopCounter4 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                  }
                  else
                  {
                    l_str_SiteID_long = StrConcat12(l_str_SiteID_long, l_arr_strSiteNamesForThisCarrier_Distinct.ElementAt( loopCounter4 -1), Translate(","), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                  }
                }
              }
              l_intReturnValueFindSubString = StrFind(l_arr_strCarrierName_Distinct.ElementAt( loopCounter3 -1), Translate("TIP"));
              if (l_intReturnValueFindSubString >= 0)
              {
                l_intReturnValueFindSubString_PLT_TIP1000 = StrFind(l_arr_strCarrierName_Distinct.ElementAt( loopCounter3 -1), ARW_Global::CarrierType::PLT_TIP1000);
                if (l_intReturnValueFindSubString_PLT_TIP1000 >= 0)
                {
                  file_RunData_DB_PositionID = l_str_SiteID_long;
                }
                else
                {
                  if (i_str_LabwareType == ARW_Global::LabwareType::TIP50)
                  {
                    if(0){
                      l_int_MaxNumberOfSites = ARW_Global::TipLocations::NumberOfSlotsFor50;
                    }
                    file_RunData_DB_PositionID = Translate("1 - 9");
                  }
                  if (i_str_LabwareType == ARW_Global::LabwareType::TIP300)
                  {
                    if(0){
                      l_int_MaxNumberOfSites = ARW_Global::TipLocations::NumberOfSlotsFor300;
                    }
                    file_RunData_DB_PositionID = Translate("2 - 10");
                  }
                  if (i_str_LabwareType == ARW_Global::LabwareType::TIP1000)
                  {
                    if(0){
                      l_int_MaxNumberOfSites = ARW_Global::TipLocations::NumberOfSlotsFor1000;
                    }
                    file_RunData_DB_PositionID = Translate("10");
                  }
                  if (i_str_LabwareType != ARW_Global::LabwareType::TIPAdapter)
                  {
                    if(0){
                      file_RunData_DB_PositionID = StrConcat12(Translate("1 - "), l_int_MaxNumberOfSites, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    }
                  }
                  else
                  {
                    if(0){
                      file_RunData_DB_SiteID = Translate("Tip Adapter");
                    }
                    file_RunData_DB_SiteID = Translate("1");
                  }
                }
              }
              else
              {
                file_RunData_DB_PositionID = l_str_SiteID_long;
              }
            }
            file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
            file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
            file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
            file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
            file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
            file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
            file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
            file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
            file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
            file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
            file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
            file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
            file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
            file_RunData.AddField("DB_PrepareMastermixOnDeck", file_RunData_DB_PrepareMastermixOnDeck, hslInteger);
            file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
            if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslAppend) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
            }
            if( 0 == file_RunData.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 != file_RunData.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            file_RunData.RemoveFields();
          }
        }
        l_arr_strSiteNames.SetSize(0);
      }
    }
  }

  function Load_Carrier_WithoutBarcodeReading( device & ML_STAR, variable i_str_CarrierID, variable i_bln_SkipLoadingRoutine, variable i_bln_IsItLoadable, variable i_bln_LoadCarrierOnly_NoDialogs, variable i_str_MainImageName, variable i_str_SubImageName ) variable {
    private variable l_int_NumberOfElementsInThisCarrier;
    private variable l_bln_CarrierLoaded;
    private variable l_intReturnValueFindSubString;
    private variable l_bln_50Fseq_Unloaded;
    private variable l_int_ReturnSearchIndex;
    private variable l_int_MaximumNumberOfPlatesAllowed;
    private variable l_bln_AllPlatesAddedToStack;
    private variable l_intTotalNumberOfPlatesNeeded;
    private variable l_intNumberOfSiteIDs;
    private variable l_intReturnValueFindSubString1000;
    private variable l_bln_MultiplePositionsFound;
    private variable l_str_FunctionName;
    private variable l_int_MaxNumberOfPlatesPerStack;
    private variable l_intReturnValueFindSubString_TIP_50F;
    private variable l_int_ReturnSearch_RGT;
    private variable l_intReturnValueFindSubString50;
    private variable l_int_rtnErrorDialog;
    private variable l_bln_300Fseq_Unloaded;
    private variable l_int_RemainingUnitsToLoad;
    private variable l_intReturnValueFindSubString_TIP_300F;
    private variable l_str_SQLSentence;
    private variable loopCounter1;
    private variable l_int_LengthString;
    private variable l_str_RunData_DB_TotalVolume;
    private variable l_int_NumberOfPlatesPerSite;
    private variable loopCounter2;
    private variable l_str_RunData_DB_Units;
    private variable l_intNumberOfPlatesLastSite;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable l_str_PLT_1000TIP_Positions;
    private variable l_int_TipType;
    private variable l_intReturnValueFindSubString300;
    private variable l_strStepRetrunValueLoadCarrier;
    private variable l_arr_strPositionIds_ForThisCarrier[];
    private variable l_arr_MultipleElementForThisCarrier[];
    private variable l_arr_DataColumn3_Descriptions[];
    private variable l_arr_DataColumn1_Positions[];
    private variable l_arr_DataColumn2_QuantityVolumes[];
    l_str_FunctionName = Translate("");
    l_str_FunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    l_bln_CarrierLoaded = ASWGLOBAL::BOOL::FALSE;
    Util2::Debug::TraceArray(Translate("*******************************   t_arr_strCarrierName_Distinct: "), t_arr_strCarrierName_Distinct);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Carrier requested: "), i_str_CarrierID);
    l_int_ReturnSearchIndex = ARRAYTOOLS::Lookup(t_arr_strCarrierName_Distinct, i_str_CarrierID);
    Trace("result for searching carrier ID : ",l_int_ReturnSearchIndex);
    l_bln_50Fseq_Unloaded = ASWGLOBAL::BOOL::FALSE;
    l_bln_300Fseq_Unloaded = ASWGLOBAL::BOOL::FALSE;
    if (l_int_ReturnSearchIndex != 0)
    {
      if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      if (i_bln_SkipLoadingRoutine != ASWGLOBAL::BOOL::TRUE)
      {
        if (i_bln_IsItLoadable == ASWGLOBAL::BOOL::TRUE)
        {
          l_intReturnValueFindSubString_TIP_50F = StrFind(i_str_CarrierID, ARW_Global::CarrierType::TIP50_01);
          if (l_intReturnValueFindSubString_TIP_50F >= 0)
          {
            ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
            {
              ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            }
          }
          else
          {
            l_intReturnValueFindSubString_TIP_300F = StrFind(i_str_CarrierID, ARW_Global::CarrierType::TIP300_01);
            if (l_intReturnValueFindSubString_TIP_300F >= 0)
            {
              ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
              if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
              {
                ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
              }
            }
            else
            {
              ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            }
          }
        }
      }
      l_arr_DataColumn1_Positions.SetSize(0);
      l_arr_DataColumn2_QuantityVolumes.SetSize(0);
      l_arr_DataColumn3_Descriptions.SetSize(0);
      l_arr_MultipleElementForThisCarrier.SetSize(0);
      l_str_SQLSentence = Translate("");
      l_str_PLT_1000TIP_Positions = Translate("");
      l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_CarrierName] = '",i_str_CarrierID,"'","","","","","","","","","");
      Trace(l_str_SQLSentence);
      //l_str_SQLSentence = StrConcat12("","","","","","","","","","","","");
      Trace ("t_str_FullpathFile_RunData: ", t_str_FullpathFile_RunData);
      file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
      file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
      file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
      file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
      file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
      file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
      file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
      file_RunData.AddField("DB_LabwareType", file_RunData_DB_LabwareType, hslString, 255);
      file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
      file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
      file_RunData.AddField("DB_ReagentName", file_RunData_DB_ReagentName, hslString, 255);
      file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
      file_RunData.AddField("DB_ReagentType", file_RunData_DB_ReagentType, hslString, 255);
      file_RunData.AddField("DB_PrepareMastermixOnDeck", file_RunData_DB_PrepareMastermixOnDeck, hslInteger);
      file_RunData.AddField("DB_ReagentNameANDLabwareType", file_RunData_DB_ReagentNameANDLabwareType, hslString, 255);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, l_str_SQLSentence) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
      {
        loopCounter2 = 0;
        while (
           (file_RunData.Eof() == 0)
        )
        {
          loopCounter2 = loopCounter2 + 1;
          if( 0 == file_RunData.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_arr_MultipleElementForThisCarrier.AddAsLast(file_RunData_DB_ReagentName);
          l_int_LengthString = StrGetLength(file_RunData_DB_PositionID);
          if (i_str_CarrierID == ARW_Global::CarrierType::PLT_TIP1000)
          {
            if (file_RunData_DB_LabwareType == ARW_Global::LabwareType::TIP1000)
            {
              l_str_PLT_1000TIP_Positions = StrConcat12(l_str_PLT_1000TIP_Positions, file_RunData_DB_PositionID, Translate(","), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              l_arr_DataColumn1_Positions.AddAsLast(l_str_PLT_1000TIP_Positions);
            }
            else
            {
              if (t_bln_CheckAditionalBarcodes == ASWGLOBAL::BOOL::TRUE)
              {
                l_str_PLT_1000TIP_Positions = StrConcat12(l_str_PLT_1000TIP_Positions, file_RunData_DB_PositionID, Translate(","), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              }
              l_arr_DataColumn1_Positions.AddAsLast(file_RunData_DB_PositionID);
            }
          }
          else
          {
            l_bln_MultiplePositionsFound = StrFind(file_RunData_DB_PositionID, Translate(","));
            if (l_int_LengthString == 0)
            {
              l_arr_DataColumn1_Positions.AddAsLast(file_RunData_DB_SiteID);
            }
            else
            {
              if (l_bln_MultiplePositionsFound >= 0)
              {
                if (file_RunData_DB_CarrierName != ARW_Global::CarrierType::PLT_Stack)
                {
                  l_intNumberOfSiteIDs = 1;
                  l_arr_DataColumn1_Positions.AddAsLast(file_RunData_DB_PositionID);
                }
                else
                {
                  STRTOKENIZE::StrTokenize(file_RunData_DB_PositionID, Translate(","), l_arr_strPositionIds_ForThisCarrier, ASWGLOBAL::BOOL::FALSE);
                  l_intNumberOfSiteIDs=l_arr_strPositionIds_ForThisCarrier.GetSize();
                  {
                    for(loopCounter3 = 0; loopCounter3 < l_intNumberOfSiteIDs;)
                    {
                      loopCounter3 = loopCounter3 + 1;
                      l_arr_DataColumn1_Positions.AddAsLast(l_arr_strPositionIds_ForThisCarrier.ElementAt( loopCounter3 -1));
                    }
                  }
                }
              }
              else
              {
                l_intNumberOfSiteIDs = 1;
                l_arr_DataColumn1_Positions.AddAsLast(file_RunData_DB_PositionID);
              }
            }
          }
          l_int_ReturnSearch_RGT = StrFind(i_str_CarrierID, Translate("RGT"));
          if (i_str_CarrierID == ARW_Global::CarrierType::PLT_Stack)
          {
            if (file_RunData_DB_LabwareType == ARW_Global::LabwareType::MIDI_Plate)
            {
              l_int_MaxNumberOfPlatesPerStack = ARW_Global::StackDefinition::NumberOfUnitsStack_MIDI_Plate;
            }
            if (file_RunData_DB_LabwareType == ARW_Global::LabwareType::HSP_Plate)
            {
              l_int_MaxNumberOfPlatesPerStack = ARW_Global::StackDefinition::NumberOfUnitsStack_HSP_Plate;
            }
            if (file_RunData_DB_LabwareType == ARW_Global::LabwareType::Comfortlid)
            {
              l_int_MaxNumberOfPlatesPerStack = ARW_Global::StackDefinition::NumberOfUnitsStack_Comfortlid;
            }
          }
          if (l_int_ReturnSearch_RGT >= 0)
          {
            _GenerateString(file_RunData_DB_TotalVolume, l_str_RunData_DB_TotalVolume);
            l_arr_DataColumn2_QuantityVolumes.AddAsLast(l_str_RunData_DB_TotalVolume);
            l_arr_DataColumn3_Descriptions.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
          }
          else
          {
            if (l_bln_MultiplePositionsFound != 0)
            {
              if (i_str_CarrierID == ARW_Global::CarrierType::PLT_Stack)
              {
                l_intTotalNumberOfPlatesNeeded = file_RunData_DB_Units;
                l_int_MaximumNumberOfPlatesAllowed = l_int_MaxNumberOfPlatesPerStack * l_intNumberOfSiteIDs;
                TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_intTotalNumberOfPlatesNeeded: "), l_intTotalNumberOfPlatesNeeded);
                TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_int_MaximumNumberOfPlatesAllowed: "), l_int_MaximumNumberOfPlatesAllowed);
                TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_int_MaxNumberOfPlatesPerStack: "), l_int_MaxNumberOfPlatesPerStack);
                if (l_intTotalNumberOfPlatesNeeded > l_int_MaximumNumberOfPlatesAllowed)
                {
                  Display_Error_Dialog(Translate("The number of elements to stack exceeds the total number of positions in 'stack deck sequence'. Review maximum number of elements in stack. Method will abort"));
                  abort;
                }
                l_intNumberOfPlatesLastSite = file_RunData_DB_Units % l_int_MaxNumberOfPlatesPerStack;
                if (l_intNumberOfPlatesLastSite == 0)
                {
                  l_intNumberOfPlatesLastSite = l_int_MaxNumberOfPlatesPerStack;
                }
                l_bln_AllPlatesAddedToStack = ASWGLOBAL::BOOL::FALSE;
                {
                  for(loopCounter4 = 0; loopCounter4 < l_intNumberOfSiteIDs;)
                  {
                    loopCounter4 = loopCounter4 + 1;
                    if (l_bln_AllPlatesAddedToStack == ASWGLOBAL::BOOL::FALSE)
                    {
                      if (file_RunData_DB_Units <= l_int_MaxNumberOfPlatesPerStack)
                      {
                        l_int_NumberOfPlatesPerSite = file_RunData_DB_Units;
                      }
                      else
                      {
                        if (l_intNumberOfSiteIDs != loopCounter4)
                        {
                        l_int_NumberOfPlatesPerSite = l_int_MaxNumberOfPlatesPerStack;
                        }
                        else
                        {
                        l_int_NumberOfPlatesPerSite = l_intNumberOfPlatesLastSite;
                        }
                      }
                    }
                    _ConvertValueToString(l_int_NumberOfPlatesPerSite, l_str_RunData_DB_Units);
                    l_arr_DataColumn2_QuantityVolumes.AddAsLast(l_str_RunData_DB_Units);
                    l_arr_DataColumn3_Descriptions.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
                    l_int_RemainingUnitsToLoad = l_intTotalNumberOfPlatesNeeded - l_int_NumberOfPlatesPerSite;
                    if (l_int_RemainingUnitsToLoad == 0)
                    {
                      l_intTotalNumberOfPlatesNeeded = 0;
                      l_int_NumberOfPlatesPerSite = 0;
                      l_bln_AllPlatesAddedToStack = ASWGLOBAL::BOOL::TRUE;
                    }
                    else
                    {
                      l_bln_AllPlatesAddedToStack = ASWGLOBAL::BOOL::FALSE;
                    }
                  }
                }
              }
              else
              {
                _ConvertValueToString(file_RunData_DB_Units, l_str_RunData_DB_Units);
                l_arr_DataColumn2_QuantityVolumes.AddAsLast(l_str_RunData_DB_Units);
                l_arr_DataColumn3_Descriptions.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
              }
            }
            else
            {
              _ConvertValueToString(file_RunData_DB_Units, l_str_RunData_DB_Units);
              l_arr_DataColumn2_QuantityVolumes.AddAsLast(l_str_RunData_DB_Units);
              l_arr_DataColumn3_Descriptions.AddAsLast(file_RunData_DB_ReagentNameANDLabwareType);
            }
          }
        }
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
      l_int_LengthString = StrGetLength(l_str_PLT_1000TIP_Positions);
      l_int_LengthString = l_int_LengthString - 1;
      l_str_PLT_1000TIP_Positions = StrLeft(l_str_PLT_1000TIP_Positions, l_int_LengthString);
      Util2::Debug::TraceArray(Translate("l_arr_DataColumn1_Positions: "), l_arr_DataColumn1_Positions);
      Util2::Debug::TraceArray(Translate("l_arr_DataColumn2_QuantityVolumes: "), l_arr_DataColumn2_QuantityVolumes);
      Util2::Debug::TraceArray(Translate("l_arr_DataColumn3_Descriptions: "), l_arr_DataColumn3_Descriptions);
      _SortElements(l_arr_DataColumn1_Positions, l_arr_DataColumn2_QuantityVolumes, l_arr_DataColumn3_Descriptions, 1);
      if (i_bln_LoadCarrierOnly_NoDialogs == ASWGLOBAL::BOOL::FALSE)
      {
        _Display_LoadCarrier_Dialog(i_str_MainImageName, i_str_SubImageName, Translate(""), l_arr_DataColumn1_Positions, l_arr_DataColumn2_QuantityVolumes, l_arr_DataColumn3_Descriptions);
        l_intReturnValueFindSubString = StrFind(i_str_CarrierID, Translate("TIP"));
        if (l_intReturnValueFindSubString < 0)
        {
          l_intReturnValueFindSubString = StrFind(i_str_CarrierID, Translate("Tip"));
        }
        if (l_intReturnValueFindSubString >= 0)
        {
          MECC::TraceComment(Translate("Substring \"Tip\" found within Carrier ID to be loaded"));
          l_intReturnValueFindSubString50 = StrFind(file_RunData_DB_ReagentName, ARW_Global::LabwareType::TIP50);
          l_intReturnValueFindSubString300 = StrFind(file_RunData_DB_ReagentName, ARW_Global::LabwareType::TIP300);
          l_int_NumberOfElementsInThisCarrier=l_arr_MultipleElementForThisCarrier.GetSize();
          if (l_int_NumberOfElementsInThisCarrier == 1)
          {
            l_intReturnValueFindSubString1000 = StrFind(file_RunData_DB_ReagentName, ARW_Global::LabwareType::TIP1000);
          }
          else
          {
            {
              for(loopCounter5 = 0; loopCounter5 < l_int_NumberOfElementsInThisCarrier;)
              {
                loopCounter5 = loopCounter5 + 1;
                l_intReturnValueFindSubString1000 = StrFind(l_arr_MultipleElementForThisCarrier.ElementAt( loopCounter5 -1), ARW_Global::LabwareType::TIP1000);
                if (l_intReturnValueFindSubString1000 >= 0)
                {
                  break;
                }
              }
            }
          }
          if (l_intReturnValueFindSubString50 >= 0)
          {
            l_int_TipType = 1;
          }
          else
          {
          }
          if (l_intReturnValueFindSubString300 >= 0)
          {
            l_int_TipType = 2;
          }
          else
          {
          }
          if (l_intReturnValueFindSubString1000 >= 0)
          {
            l_int_TipType = 3;
          }
          else
          {
          }
          DATA_TipCounterRead(ML_STAR, file_RunData_DB_Units, file_RunData_DB_Units, file_RunData_DB_Units, l_int_TipType, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
          DATA_TipCounterWrite(ML_STAR);
        }
      }
      if (i_bln_SkipLoadingRoutine != ASWGLOBAL::BOOL::TRUE)
      {
        if (i_bln_IsItLoadable == ASWGLOBAL::BOOL::TRUE)
        {
          Trace("Carrier ID to be loaded:", i_str_CarrierID);
          if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
          {
            {
              loopCounter1 = 0;
              while (1 == 1)
              {
                loopCounter1 = loopCounter1 + 1;
                onerror goto errLabel_18 ;
                err.Clear();
                ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                break;
                errLabel_18 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
                  l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
                  _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
                }   /* end if from skip handler if no error */
              }
            }
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
          if (l_intReturnValueFindSubString_TIP_50F >= 0)
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
            }
            if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
              }
            }
          }
          else
          {
            if (l_intReturnValueFindSubString_TIP_300F >= 0)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
              }
              if (t_blnPlatformNGSSTARused == ASWGLOBAL::BOOL::TRUE)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
                }
              }
            }
            else
            {
              if (i_str_CarrierID == ARW_Global::CarrierType::PLT_TIP1000)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
                }
              }
            }
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        }
      }
      return (ASWGLOBAL::BOOL::TRUE);
      if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
      {
        {
          loopCounter1 = 0;
          while (1 == 1)
          {
            loopCounter1 = loopCounter1 + 1;
            onerror goto errLabel_19 ;
            err.Clear();
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            break;
            errLabel_19 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
              l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            }   /* end if from skip handler if no error */
          }
        }
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    else
    {
      MECC::TraceComment(Translate("Carrier ID not found withing ARW list (HSL file) --> no loading will be performed!\nHint : If you want to use this command with a new carrier : update first your HSL file..."));
    }
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }

  private function DATA_TipCounterRead_CustomTips( device & ML_STAR, variable i_intNumberOfTip50_required, variable i_intNumberOfTip300_required, variable i_intNumberOfTip1000_required, variable i_intTipTypeToBeProcessed, variable i_blnAlwaysEditTipcounter, variable i_blnShowGUITipAndTimeCalculation ) void {
    private variable l_blnProcessTip1000;
    private variable l_blnScheduleTipReloadDuringProcess;
    private variable l_strDisplayText_Insufficient50s;
    private variable l_strText_Insufficient50s;
    private variable t_intMaxSeqTips50AfterEdit;
    private variable t_intConsumedTips300;
    private variable t_intConsumedTips300BeforeRelaodTips;
    private variable l_blnReloadAllTipTypes;
    private variable t_intConsumedTips50;
    private variable t_intMaxSeqTips1000AfterEdit;
    private variable l_strDisplayText_Insufficient300s;
    private variable l_blnProcessTip300;
    private variable l_strText_Insufficient1000s;
    private variable l_strLabwareIDCarrier;
    private variable l_intCurrentPosition_1000;
    private variable l_strText_Insufficient300s;
    private variable l_intCalculatedQuantity_1000;
    private variable l_intCalculatedQuantity_300;
    private variable l_str_FunctionName;
    private variable l_retValueDialog;
    private variable l_intCurrentPosition_50;
    private variable t_intConsumedTips50BeforeRelaodTips;
    private variable l_intCurrentPosition_300;
    private variable t_intConsumedTips1000BeforeRelaodTips;
    private variable l_intEndPosition_1000;
    private variable t_intMaxSeqTips300AfterEdit;
    private variable l_intReturnValueMessageDialog;
    private variable l_intEndPosition_300;
    private variable loopCounter1;
    private variable l_intMaxTipsAvailable;
    private variable l_strDisplayText_Insufficient1000s;
    private variable l_blnProcessTip50;
    private variable t_intConsumedTips1000;
    private variable t_intTotalConsumedTips50;
    private variable l_intCalculatedQuantity_50;
    private variable t_blnInsuffientTips;
    private variable l_intEndPosition_50;
    private variable t_blnReduceTip1000sequence;
    private variable t_intNumberOfAllAvailableChannels;
    private variable l_strStepRetrunValueLoadCarrier;
    private variable l_arrListTipCalculationMessage[];
    l_str_FunctionName = Translate("");
    l_str_FunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    Trace ("---Number of 50uL tips required: ", i_intNumberOfTip50_required);
    Trace ("---Number of 300uL tips required: ", i_intNumberOfTip300_required);
    Trace ("---Number of 1000uL tips required: ", i_intNumberOfTip1000_required);
    Trace("Read current tip status from database using following tipcounter . t_strTipCounterNameTip50 : ",t_strTipCounterNameTip50," ; t_strTipCounterNameTip300 : ",t_strTipCounterNameTip300," ; t_strTipCounterNameTip1000 : ",t_strTipCounterNameTip1000);
    l_blnProcessTip50 = ASWGLOBAL::BOOL::FALSE;
    l_blnProcessTip300 = ASWGLOBAL::BOOL::FALSE;
    l_blnProcessTip1000 = ASWGLOBAL::BOOL::FALSE;
    l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::FALSE;
    if (i_intTipTypeToBeProcessed == 4)
    {
      l_blnProcessTip50 = ASWGLOBAL::BOOL::TRUE;
      l_blnProcessTip300 = ASWGLOBAL::BOOL::TRUE;
      l_blnProcessTip1000 = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      if (i_intTipTypeToBeProcessed == 1)
      {
        l_blnProcessTip50 = ASWGLOBAL::BOOL::TRUE;
      }
      if (i_intTipTypeToBeProcessed == 2)
      {
        l_blnProcessTip300 = ASWGLOBAL::BOOL::TRUE;
      }
      if (i_intTipTypeToBeProcessed == 3)
      {
        l_blnProcessTip1000 = ASWGLOBAL::BOOL::TRUE;
      }
    }
    l_strText_Insufficient50s = Translate(" No reload of this tip type necessary");
    l_strText_Insufficient300s = Translate(" No reload of this tip type necessary");
    l_strText_Insufficient1000s = Translate(" No reload of this tip type necessary");
    if (l_blnProcessTip50 == ASWGLOBAL::BOOL::TRUE)
    {
      if (i_blnAlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, t_seqTips50, t_strTipCounterNameTip50, 9999);
        t_intMaxSeqTips50AfterEdit = t_seqTips50.GetCount();
        DATA_TipCounterWrite(ML_STAR);
      }
      else
      {
        STAR_TIP_TOOLS::TipCounter_Read(ML_STAR, t_seqTips50, t_strTipCounterNameTip50);
      }
      l_intCurrentPosition_50 = t_seqTips50.GetCurrentPosition();
      l_intEndPosition_50 = t_seqTips50.GetCount();
      l_intCalculatedQuantity_50 = l_intEndPosition_50 - l_intCurrentPosition_50;
      l_intCalculatedQuantity_50 = l_intCalculatedQuantity_50 + 1;
      t_intConsumedTips50 = t_intMaxSeqTips50AfterEdit - l_intCalculatedQuantity_50;
      if (t_intTotalConsumedTips50 < 0)
      {
        t_intConsumedTips50 = 0;
      }
      TrcTrace12(Translate("CurrentPosition_50 : "), l_intCurrentPosition_50, Translate(" - EndPosition_50 : "), l_intEndPosition_50, Translate(" - Quantity_50 : "), l_intCalculatedQuantity_50, Translate(" - _intMaxSeqTips50AfterEdit : "), t_intMaxSeqTips50AfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTips50 : "), t_intConsumedTips50);
      if (l_intCalculatedQuantity_50 < i_intNumberOfTip50_required)
      {
        t_blnInsuffientTips = 1;
        l_intMaxTipsAvailable = ARW_Global::TipLocations::NumberOfSlotsFor50 * 96;
        if (i_intNumberOfTip50_required > l_intMaxTipsAvailable)
        {
          l_strText_Insufficient50s = Translate("\nPlease load two full carriers of 50ul tips.  You will need to come back later to replenish.");
        }
        else
        {
          l_strText_Insufficient50s = Translate("\nPlease load more 50ul tips.  You will need at least this many:  ");
          l_strText_Insufficient50s = StrConcat2(l_strText_Insufficient50s, i_intNumberOfTip50_required);
        }
      }
      else
      {
        l_strText_Insufficient50s = Translate(" No reload of this tip type necessary");
      }
    }
    if (l_blnProcessTip300 == ASWGLOBAL::BOOL::TRUE)
    {
      if (i_blnAlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, t_seqTips300, t_strTipCounterNameTip300, 9999);
        t_intMaxSeqTips300AfterEdit = t_seqTips300.GetCount();
        DATA_TipCounterWrite(ML_STAR);
      }
      else
      {
        STAR_TIP_TOOLS::TipCounter_Read(ML_STAR, t_seqTips300, t_strTipCounterNameTip300);
      }
      l_intCurrentPosition_300 = t_seqTips300.GetCurrentPosition();
      l_intEndPosition_300 = t_seqTips300.GetCount();
      l_intCalculatedQuantity_300 = l_intEndPosition_300 - l_intCurrentPosition_300;
      l_intCalculatedQuantity_300 = l_intCalculatedQuantity_300 + 1;
      t_intConsumedTips300 = t_intMaxSeqTips300AfterEdit - l_intCalculatedQuantity_300;
      if (t_intConsumedTips300 < 0)
      {
        t_intConsumedTips300 = 0;
      }
      TrcTrace12(Translate("CurrentPosition_300 : "), l_intCurrentPosition_300, Translate(" - EndPosition_300 : "), l_intEndPosition_300, Translate(" - Quantity_300 : "), l_intCalculatedQuantity_300, Translate(" - _intMaxSeqTips300AfterEdit : "), t_intMaxSeqTips300AfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTips300 : "), t_intConsumedTips300);
      if (l_intCalculatedQuantity_300 < i_intNumberOfTip300_required)
      {
        t_blnInsuffientTips = 1;
        l_intMaxTipsAvailable = ARW_Global::TipLocations::NumberOfSlotsFor300 * 96;
        if (i_intNumberOfTip300_required > l_intMaxTipsAvailable)
        {
          l_strText_Insufficient300s = Translate("\nPlease load two full carriers of 300ul tips.  You will need to come back later to replenish.");
        }
        else
        {
          l_strText_Insufficient300s = Translate("\nPlease load more 300ul tips.  You will need at least this many:  ");
          l_strText_Insufficient300s = StrConcat2(l_strText_Insufficient300s, i_intNumberOfTip300_required);
        }
      }
      else
      {
        l_strText_Insufficient300s = Translate(" No reload of this tip type necessary");
      }
    }
    if (l_blnProcessTip1000 == ASWGLOBAL::BOOL::TRUE)
    {
      if (i_blnAlwaysEditTipcounter == ASWGLOBAL::BOOL::TRUE)
      {
        STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, t_seqTips1000, t_strTipCounterNameTip1000, 9999);
        t_intMaxSeqTips1000AfterEdit = t_seqTips1000.GetCount();
        DATA_TipCounterWrite(ML_STAR);
      }
      else
      {
        STAR_TIP_TOOLS::TipCounter_Read(ML_STAR, t_seqTips1000, t_strTipCounterNameTip1000);
      }
      l_intCurrentPosition_1000 = t_seqTips1000.GetCurrentPosition();
      l_intEndPosition_1000 = t_seqTips1000.GetCount();
      l_intCalculatedQuantity_1000 = l_intEndPosition_1000 - l_intCurrentPosition_1000;
      l_intCalculatedQuantity_1000 = l_intCalculatedQuantity_1000 + 1;
      t_intConsumedTips1000 = t_intMaxSeqTips1000AfterEdit - l_intCalculatedQuantity_1000;
      if (t_intConsumedTips1000 < 0)
      {
        t_intConsumedTips1000 = 0;
      }
      TrcTrace12(Translate("CurrentPosition_1000 : "), l_intCurrentPosition_1000, Translate(" - EndPosition_1000 : "), l_intEndPosition_1000, Translate(" - Quantity_1000 : "), l_intCalculatedQuantity_1000, Translate(" - _intMaxSeqTips1000AfterEdit : "), t_intMaxSeqTips1000AfterEdit, Translate(""), Translate(""), Translate(" ------> _intConsumedTips1000 : "), t_intConsumedTips1000);
      if (l_intCalculatedQuantity_1000 < i_intNumberOfTip1000_required)
      {
        t_blnInsuffientTips = 1;
        if (i_intNumberOfTip1000_required > 96)
        {
          l_strText_Insufficient1000s = Translate("\nPlease load 2 (only 1 for MPH version) full racks of 1000ul tips.  You will need to come back later to replenish.");
        }
        else
        {
          l_strText_Insufficient1000s = Translate("\nPlease load more 1000ul tips.  You will need at least this many:  ");
          l_strText_Insufficient1000s = StrConcat2(l_strText_Insufficient1000s, i_intNumberOfTip1000_required);
        }
      }
      else
      {
        l_strText_Insufficient1000s = Translate(" No reload of this tip type necessary");
      }
    }
    if (t_blnInsuffientTips == 1)
    {
      if (l_blnProcessTip50 == ASWGLOBAL::BOOL::TRUE)
      {
        l_intMaxTipsAvailable = ARW_Global::TipLocations::NumberOfSlotsFor50 * 96;
        if (i_intNumberOfTip50_required > l_intMaxTipsAvailable)
        {
          l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (l_blnProcessTip300 == ASWGLOBAL::BOOL::TRUE)
      {
        l_intMaxTipsAvailable = ARW_Global::TipLocations::NumberOfSlotsFor300 * 96;
        if (i_intNumberOfTip300_required > l_intMaxTipsAvailable)
        {
          l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (l_blnProcessTip1000 == ASWGLOBAL::BOOL::TRUE)
      {
        l_intMaxTipsAvailable = ARW_Global::TipLocations::NumberOfSlotsFor1000 * 96;
        if (i_intNumberOfTip1000_required > l_intMaxTipsAvailable)
        {
          l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
        }
        if(0){
          if (t_blnReduceTip1000sequence == ASWGLOBAL::BOOL::TRUE)
          {
            if (i_intNumberOfTip1000_required > 96)
            {
              l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
            }
          }
          else
          {
            if (i_intNumberOfTip1000_required > 192)
            {
              l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::TRUE;
            }
          }
        }
      }
      if (l_blnScheduleTipReloadDuringProcess == ASWGLOBAL::BOOL::TRUE)
      {
        l_arrListTipCalculationMessage.SetSize(0);
        l_strDisplayText_Insufficient50s = StrConcat2(Translate(" Tip type 50 ul filter : "), l_strText_Insufficient50s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient50s);
        l_strDisplayText_Insufficient300s = StrConcat2(Translate(" Tip type 300 ul filter : "), l_strText_Insufficient300s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient300s);
        l_strDisplayText_Insufficient1000s = StrConcat2(Translate(" Tip type 1000 ul filter : "), l_strText_Insufficient1000s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient1000s);
        VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Not enough tips available."), Translate("The amount of needed tips exceeds the maximum capacity of available tips. A reload step will be scheduled within the process."), l_arrListTipCalculationMessage);
        l_strText_Insufficient50s = Translate(" No reload of this tip type necessary");
        l_strText_Insufficient300s = Translate(" No reload of this tip type necessary");
        l_strText_Insufficient1000s = Translate(" No reload of this tip type necessary");
        l_blnScheduleTipReloadDuringProcess = ASWGLOBAL::BOOL::FALSE;
        t_blnInsuffientTips = ASWGLOBAL::BOOL::FALSE;
      }
      else
      {
        l_blnReloadAllTipTypes = ASWGLOBAL::BOOL::FALSE;
        l_arrListTipCalculationMessage.SetSize(0);
        l_strDisplayText_Insufficient50s = StrConcat2(Translate(" Tip type 50 ul filter : "), l_strText_Insufficient50s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient50s);
        l_strDisplayText_Insufficient300s = StrConcat2(Translate(" Tip type 300 ul filter : "), l_strText_Insufficient300s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient300s);
        l_strDisplayText_Insufficient1000s = StrConcat2(Translate(" Tip type 1000 ul filter : "), l_strText_Insufficient1000s);
        l_arrListTipCalculationMessage.AddAsLast(l_strDisplayText_Insufficient1000s);
        l_retValueDialog = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Not enough tips available - refill tips according to shown list"), Translate("The amount of needed tips exceeds the maximum capacity of available tips. A reload step will be scheduled within the process."), l_arrListTipCalculationMessage);
        l_intReturnValueMessageDialog = VectorCustomDialogs::MessageDialog(Translate(""), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Preventative tip exchange : Do you want to take the chance to reload all tip types?"));
        if (l_intReturnValueMessageDialog == ASWGLOBAL::DIALOG::YES)
        {
          l_blnReloadAllTipTypes = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          l_blnReloadAllTipTypes = ASWGLOBAL::BOOL::FALSE;
        }
      }
      if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
      }
      if (l_blnReloadAllTipTypes == ASWGLOBAL::BOOL::TRUE)
      {
        l_strText_Insufficient50s = Translate(" Preventive reload of this tip type necessary");
        l_strText_Insufficient300s = Translate(" Preventive reload of this tip type necessary");
        l_strText_Insufficient1000s = Translate(" Preventive reload of this tip type necessary");
      }
      if (l_strText_Insufficient50s != " No reload of this tip type necessary")
      {
        t_intConsumedTips50BeforeRelaodTips = t_intConsumedTips50;
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        }
        if (t_intNumberOfAllAvailableChannels == 8)
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_50F_PINK_0001");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_50F_PINK_0002");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
        else
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_A00_0001");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
        STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, t_seqTips50, t_strTipCounterNameTip50, 9999);
        t_intMaxSeqTips50AfterEdit = t_seqTips50.GetCount();
        DATA_TipCounterWrite(ML_STAR);
        if (t_intNumberOfAllAvailableChannels == 8)
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_50F_PINK_0001");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_50F_PINK_0002");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        }
        else
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_A00_0001");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        }
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          {
            loopCounter1 = 0;
            while (1 == 1)
            {
              loopCounter1 = loopCounter1 + 1;
              onerror goto errLabel_20 ;
              err.Clear();
              ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              break;
              errLabel_20 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              }   /* end if from skip handler if no error */
            }
          }
        }
      }
      if (l_strText_Insufficient300s != " No reload of this tip type necessary")
      {
        t_intConsumedTips300BeforeRelaodTips = t_intConsumedTips300;
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        }
        if (t_intNumberOfAllAvailableChannels == 8)
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_STF_YELLOW_0001");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_STF_YELLOW_0002");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
        else
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_A00_0002");
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
        STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, t_seqTips300, t_strTipCounterNameTip300, 9999);
        t_intMaxSeqTips300AfterEdit = t_seqTips300.GetCount();
        DATA_TipCounterWrite(ML_STAR);
        if (t_intNumberOfAllAvailableChannels == 8)
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_STF_YELLOW_0001");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_STF_YELLOW_0002");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        }
        else
        {
          l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_A00_0002");
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
          _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        }
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          {
            loopCounter1 = 0;
            while (1 == 1)
            {
              loopCounter1 = loopCounter1 + 1;
              onerror goto errLabel_21 ;
              err.Clear();
              ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              break;
              errLabel_21 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              }   /* end if from skip handler if no error */
            }
          }
        }
      }
      if (l_strText_Insufficient1000s != " No reload of this tip type necessary")
      {
        t_intConsumedTips1000BeforeRelaodTips = t_intConsumedTips1000;
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        }
        if(0){
          l_strLabwareIDCarrier = ARW_Global::CarrierType::PLT_TIP1000;
        }
        l_strLabwareIDCarrier = Translate("TIP_CAR_480BC_TIP_50F_PINK_0002");
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, t_seqTips1000, t_strTipCounterNameTip1000, 9999);
        t_intMaxSeqTips1000AfterEdit = t_seqTips1000.GetCount();
        DATA_TipCounterWrite(ML_STAR);
        if(0){
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
          }
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
          	l_strStepRetrunValueLoadCarrier = arrRetValues[3];
        }
        _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport(l_strStepRetrunValueLoadCarrier);
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          {
            loopCounter1 = 0;
            while (1 == 1)
            {
              loopCounter1 = loopCounter1 + 1;
              onerror goto errLabel_22 ;
              err.Clear();
              ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              break;
              errLabel_22 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              }   /* end if from skip handler if no error */
            }
          }
        }
      }
      t_blnInsuffientTips = ASWGLOBAL::BOOL::FALSE;
    }
    DATA_TipCounterWrite(ML_STAR);
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }
} // library namespace
