#pragma once
#include "HslHamHeaterShakerLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLSensorLib.hsl"
#include "HSLInhecoTEC\\HSLInhecoTECLib.hsl"
#include "Inheco ODTC\\Inheco ODTC.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLSeqLib.hsl"
#include "HSLAppsLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLMthLib.hsl"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "HSLExtensions\\String.hsl"
#include "HSLTimLib.hsl"
#include "RemoveTextDelimiters\\RemoveTextDelimitersFromAsciiTextFile.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace NGSSTARPREP {
  variable t_blnSimulationModeON;
  variable t_strODTCMethodName;
  variable t_arrQuantitiesMasterMix[];
  variable t_arrDescriptionsMasterMix[];
  variable t_arrPositionsMasterMix[];
  variable t_intMasterMixNumber;
  private function Abstract(  ) void ;
  function CPAC_CheckTemperature( variable i_intCPACTemp ) void ;
  function CPAC_Init(  ) void ;
  function CPAC_SetTemperature( variable i_intCPACTemp ) void ;
  function CPAC_Terminate(  ) void ;
  function DATA_HandOverSimulationModeForAllLocalSMTs( variable i_blnSimulationON, variable i_blnShowUVGUI ) void ;
  private function DATA_ReadInputWorklistExcelOrCSVFormat( variable i_strSamplePlateFile, sequence i_seqSourceALPTemplate, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & o_arrIndex1SeqPositions[], variable & o_arrIndex1IDs[], variable & o_arrIndex2SeqPositions[], variable & o_arrIndex2IDs[], variable & o_arrALPseqLabID[], variable & o_arrALPseqPositions[], variable & o_strIndexLabwareFormat ) void ;
  function HHS_CheckTemperature( variable i_intHHS, variable i_intHHSTemp ) void ;
  function HHS_Init( variable & o_intHHSDeviceNo1, variable & o_intHHSDeviceNo2, variable & o_intHHSDeviceNo3, variable & o_intHHSDeviceNo4, variable & o_intHHSDeviceNo5, variable i_strInitDeviceNo1, variable i_strInitDeviceNo2, variable i_strInitDeviceNo3, variable i_strInitDeviceNo4, variable i_strInitDeviceNo5, device & ML_STAR ) void ;
  function HHS_SetTemperature( variable i_intHHS, variable i_fltTemperature ) void ;
  function HHS_Shake( variable i_intHHS, variable i_intSpeed, variable i_intShakingDuration ) void ;
  function HHS_Terminate( variable i_intHHSDeviceNo1, variable i_intHHSDeviceNo2, variable i_intHHSDeviceNo3, variable i_intHHSDeviceNo4, variable i_intHHSDeviceNo5 ) void ;
  function LiquidWasteSensor_Init( variable i_intComPort ) void ;
  function ODTC_CloseDoor( variable i_intDeviceNumber ) void ;
  function ODTC_DownloadProtocol( variable i_intDeviceNumber, variable i_strProtocollFullFileName ) void ;
  function ODTC_ExecuteProtocol( variable i_intDeviceNumber, variable i_strProtocollFullFileName, variable i_strNameOfProtocollOnDevice, variable & o_intTimeForProtocol, variable & o_intRequestIDForActiveProtocol, variable i_blnShortenPreheatingMethodsTo40Seconds ) void ;
  function ODTC_GetDataFromLastRun( variable i_intDeviceNumber, variable i_strNameOfODTCProtocol ) void ;
  function ODTC_Init( variable i_strDeviceAddress, variable & o_intDeviceNum, variable i_strLocalIPAdress ) void ;
  function ODTC_OpenDoor( variable i_intDeviceNumber ) void ;
  function ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish( variable i_intDeviceNumber, variable i_intTimeForProtocoll, variable i_intRequestIDToWaitFor ) void ;
  function ODTC_Terminate( variable i_intDeviceNumber, variable i_blnOpenDoorRequested ) void ;
  function ODTC_WaitForLidAndBlockCorrectTemperature( variable i_intDeviceNumber, variable i_fltRequestedBlockTemperature, variable i_fltRequestedLidTemperature ) void ;
  function ODTC_WaitForStartedProtocolToFinish( variable i_intDeviceNumber, variable i_intTimeOut, variable i_intRequestIDToWaitFor ) void ;
  private function _CPAC_ReportErrorText( variable i_strErrorCode ) void ;
  private function _DATA_HHSTranslateErrorCode( variable i_intErrorCode, variable & o_strErrorDescription ) void ;
  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void ;
  private function _GetDataFromLastRun_ExportData( variable i_strResultOfLastRunODTC, variable i_strNameOfProtocolPerfromedODTC, variable & o_strFullPathExportedDataODTC ) variable ;
  private function _HHS_HandleReturnValue( variable i_intErrorCode ) void ;
  private function _ODTC_HandleReturnValue( variable i_blnSuccess, variable i_strFunctionName, variable i_intReturnValue, variable i_strMessage ) void ;
  private function _Version(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  private function Abstract(  ) void {
    MECC::TraceComment(Translate("*********************************************************************\nSubmethod Library:  NGSStarPrep\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate:  February 28, 2020 (By Stephan Grosch)\nVersion:  3.4.7\n\nVersion Notes:\n1. see _Version\n\n*********************************************************************"));
  }

  function HHS_Init( variable & o_intHHSDeviceNo1, variable & o_intHHSDeviceNo2, variable & o_intHHSDeviceNo3, variable & o_intHHSDeviceNo4, variable & o_intHHSDeviceNo5, variable i_strInitDeviceNo1, variable i_strInitDeviceNo2, variable i_strInitDeviceNo3, variable i_strInitDeviceNo4, variable i_strInitDeviceNo5, device & ML_STAR ) void {
    private variable l_intErrorCodeHHS;
    private variable l_intErrorCodeHHS1;
    private variable l_intErrorCodeHHS2;
    private variable l_intErrorCodeHHS3;
    private variable l_intErrorCodeHHS4;
    private variable l_intErrorCodeHHS5;
    private variable l_DialogReturn;
    private variable l_EndlessloopCounter;
    private variable l_strLastError;
    private variable l_arrListHHSinitMessage[];
    private variable l_strErrorCodeHHS;
    private variable l_strSerialNumberHHS;
    o_intHHSDeviceNo1 = 0;
    o_intHHSDeviceNo2 = 0;
    o_intHHSDeviceNo3 = 0;
    o_intHHSDeviceNo4 = 0;
    o_intHHSDeviceNo5 = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  HHS_Init <<<<<<<<<<"));
    {
      l_EndlessloopCounter = 0;
      while (1 == 1)
      {
        l_EndlessloopCounter = l_EndlessloopCounter + 1;
        HSLHamHeaterShaker::SetSimulation(t_blnSimulationModeON);
        l_intErrorCodeHHS = 0;
        if (i_strInitDeviceNo1 == "TCC")
        {
          HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, o_intHHSDeviceNo1);
          HSLHamHeaterShaker::GetSerialNumber(o_intHHSDeviceNo1, l_strSerialNumberHHS);
          Trace("HHS SN of device :", o_intHHSDeviceNo1, "is : ",l_strSerialNumberHHS);
        }
        if (i_strInitDeviceNo1 == "HHSB")
        {
          l_intErrorCodeHHS1 = HSLHamHeaterShaker::CreateUsbDevice(1, o_intHHSDeviceNo1);
          HSLHamHeaterShaker::GetSerialNumber(o_intHHSDeviceNo1, l_strSerialNumberHHS);
          Trace("HHS SN of device :", o_intHHSDeviceNo1, "is : ",l_strSerialNumberHHS);
        }
        if (i_strInitDeviceNo2 == "TCC")
        {
          HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 2, o_intHHSDeviceNo2);
          HSLHamHeaterShaker::GetSerialNumber(o_intHHSDeviceNo2, l_strSerialNumberHHS);
          Trace("HHS SN of device :", o_intHHSDeviceNo2, "is : ",l_strSerialNumberHHS);
        }
        if (i_strInitDeviceNo2 == "HHSB")
        {
          l_intErrorCodeHHS2 = HSLHamHeaterShaker::CreateUsbDevice(2, o_intHHSDeviceNo2);
          HSLHamHeaterShaker::GetSerialNumber(o_intHHSDeviceNo2, l_strSerialNumberHHS);
          Trace("HHS SN of device :", o_intHHSDeviceNo2, "is : ",l_strSerialNumberHHS);
        }
        if (i_strInitDeviceNo3 == "HHSB")
        {
          l_intErrorCodeHHS3 = HSLHamHeaterShaker::CreateUsbDevice(3, o_intHHSDeviceNo3);
          HSLHamHeaterShaker::GetSerialNumber(o_intHHSDeviceNo3, l_strSerialNumberHHS);
          Trace("HHS SN of device :", o_intHHSDeviceNo3, "is : ",l_strSerialNumberHHS);
        }
        if (i_strInitDeviceNo4 == "HHSB")
        {
          l_intErrorCodeHHS4 = HSLHamHeaterShaker::CreateUsbDevice(4, o_intHHSDeviceNo4);
          HSLHamHeaterShaker::GetSerialNumber(o_intHHSDeviceNo4, l_strSerialNumberHHS);
          Trace("HHS SN of device :", o_intHHSDeviceNo4, "is : ",l_strSerialNumberHHS);
        }
        if (i_strInitDeviceNo5 == "HHSB")
        {
          l_intErrorCodeHHS5 = HSLHamHeaterShaker::CreateUsbDevice(5, o_intHHSDeviceNo5);
          HSLHamHeaterShaker::GetSerialNumber(o_intHHSDeviceNo5, l_strSerialNumberHHS);
          Trace("HHS SN of device :", o_intHHSDeviceNo5, "is : ",l_strSerialNumberHHS);
        }
        if (l_intErrorCodeHHS1 != 0)
        {
          Trace ("Error on HHS1:  ", l_intErrorCodeHHS1);
        }
        if (l_intErrorCodeHHS2 != 0)
        {
          Trace ("Error on HHS2:  ", l_intErrorCodeHHS2);
        }
        if (l_intErrorCodeHHS3 != 0)
        {
          Trace ("Error on HHS3:  ", l_intErrorCodeHHS3);
        }
        if (l_intErrorCodeHHS4 != 0)
        {
          Trace ("Error on HHS4:  ", l_intErrorCodeHHS4);
        }
        if (l_intErrorCodeHHS5 != 0)
        {
          Trace ("Error on HHS5:  ", l_intErrorCodeHHS5);
        }
        l_intErrorCodeHHS = l_intErrorCodeHHS1 + l_intErrorCodeHHS2 + l_intErrorCodeHHS3 + l_intErrorCodeHHS4 + l_intErrorCodeHHS5;
        if (l_intErrorCodeHHS > 0)
        {
          MECC::TraceComment(Translate("\n\nHHS Error codes:\n1 - Fatal Error\n2 - Node not Initialized\n3 - Device not connected\n4 - CAN error\n5 - EEProm error\n6 - Unknown command\n7 - Unknown parameter\n8 - Parameter out of range\n9 - Voltage error\n10 - Stop \n11 - Wrong address\n13 - Shaker init failed\n14 - Shaker not initialized\n15 - Shaker step loss\n17 - Plate lock init failure\n18 - Plate lock step loss\n26 - Unknown firmware error\n\n"));
          _DATA_HHSTranslateErrorCode(l_intErrorCodeHHS, l_strErrorCodeHHS);
          l_strLastError = StrConcat2(Translate("HHS error description : "), l_strErrorCodeHHS);
          l_arrListHHSinitMessage.SetSize(0);
          l_arrListHHSinitMessage.AddAsLast(l_strLastError);
          l_DialogReturn = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("HHS - There is an error with the HHS Controller : "), Translate("Verify HHS Controller Box is turned on. Verify the HHS USB cable is connected to the PC. Click Cancel to end the method or OK to retry last command. "), l_arrListHHSinitMessage);
          if (l_DialogReturn == ASWGLOBAL::DIALOG::CANCEL)
          {
            _DATA_IntegratedAbortHandler(Translate("NGSStarPrep.smt "), Translate("HHS_Init. This initializes the HHSs. "));
          }
        }
        else
        {
          break;
        }
      }
    }
    if (i_strInitDeviceNo1 != "0")
    {
      l_intErrorCodeHHS1 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo1, 1);
      l_intErrorCodeHHS1 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo1, 0);
    }
    if (i_strInitDeviceNo2 != "0")
    {
      l_intErrorCodeHHS2 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo2, 1);
      l_intErrorCodeHHS2 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo2, 0);
    }
    if (i_strInitDeviceNo3 != "0")
    {
      l_intErrorCodeHHS3 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo3, 1);
      l_intErrorCodeHHS3 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo3, 0);
    }
    if (i_strInitDeviceNo4 != "0")
    {
      l_intErrorCodeHHS4 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo4, 1);
      l_intErrorCodeHHS4 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo4, 0);
    }
    if (i_strInitDeviceNo5 != "0")
    {
      l_intErrorCodeHHS5 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo5, 1);
      l_intErrorCodeHHS5 = HSLHamHeaterShaker::SetPlateLock(o_intHHSDeviceNo5, 0);
    }
    if (l_intErrorCodeHHS1 != 0)
    {
      Trace ("Error on HHS1:  ", l_intErrorCodeHHS1);
    }
    if (l_intErrorCodeHHS2 != 0)
    {
      Trace ("Error on HHS2:  ", l_intErrorCodeHHS2);
    }
    if (l_intErrorCodeHHS3 != 0)
    {
      Trace ("Error on HHS3:  ", l_intErrorCodeHHS3);
    }
    if (l_intErrorCodeHHS4 != 0)
    {
      Trace ("Error on HHS4:  ", l_intErrorCodeHHS4);
    }
    if (l_intErrorCodeHHS5 != 0)
    {
      Trace ("Error on HHS5:  ", l_intErrorCodeHHS5);
    }
    l_intErrorCodeHHS = l_intErrorCodeHHS1 + l_intErrorCodeHHS2 + l_intErrorCodeHHS3 + l_intErrorCodeHHS4 + l_intErrorCodeHHS5;
    if (l_intErrorCodeHHS > 0)
    {
      MECC::TraceComment(Translate("\n\nHHS Error codes:\n1 - Fatal Error\n2 - Node not Initialized\n3 - Device not connected\n4 - CAN error\n5 - EEProm error\n6 - Unknown command\n7 - Unknown parameter\n8 - Parameter out of range\n9 - Voltage error\n10 - Stop \n11 - Wrong address\n13 - Shaker init failed\n14 - Shaker not initialized\n15 - Shaker step loss\n17 - Plate lock init failure\n18 - Plate lock step loss\n26 - Unknown firmware error\n\n"));
      _DATA_HHSTranslateErrorCode(l_intErrorCodeHHS, l_strErrorCodeHHS);
      l_strLastError = StrConcat2(Translate("HHS error description : "), l_strErrorCodeHHS);
      l_arrListHHSinitMessage.SetSize(0);
      l_arrListHHSinitMessage.AddAsLast(l_strLastError);
      l_DialogReturn = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("HHS - There is an error with one or more HHS : "), Translate("Verify HHS Controller Box is turned on OR if connected via TCC1 and 2 check connections. If Hamilton Heater Shaker Box is used - verify the HHS USB cable is connected to the PC. The method will be aborted."), l_arrListHHSinitMessage);
      _DATA_IntegratedAbortHandler(Translate("NGSStarPrep.smt "), Translate("HHS_Init. This initializes the HHSs. "));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: HHS_Init <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function CPAC_Init(  ) void {
    private variable l_strInitCPAC;
    private variable l_strErrorCode;
    private variable l_answer_CPACerror;
    private variable l_strErrorText;
    private variable l_answer_CPACcheck;
    private variable l_strLastError;
    private variable l_strFirmWareVersion;
    private variable l_arrListCPACinitMessage[];
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Start Submethod : CPAC_Init <<<<<<<<<<"));
    HSLInhecoTECLib::Initialize(0, t_blnSimulationModeON, l_strInitCPAC);
    if (t_blnSimulationModeON == 0)
    {
      if (l_strInitCPAC != "000")
      {
        HSLInhecoTECLib::GetLastError(l_strLastError);
        l_strLastError = StrConcat2(Translate("CPAC error description : "), l_strLastError);
        l_arrListCPACinitMessage.SetSize(0);
        l_arrListCPACinitMessage.AddAsLast(l_strLastError);
        l_answer_CPACcheck = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("CPAC - There is an error with the CPAC Controller : "), Translate("Make sure the unit is turned on and click OK to try again"), l_arrListCPACinitMessage);
        if (l_answer_CPACcheck == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
        }
        HSLInhecoTECLib::Initialize(0, 0, l_strInitCPAC);
        if (l_strInitCPAC != "000")
        {
          HSLInhecoTECLib::GetDescriptionForErrorCode(l_strInitCPAC, l_strErrorText);
          l_strLastError = StrConcat2(Translate("CPAC error description : "), l_strErrorText);
          l_arrListCPACinitMessage.SetSize(0);
          l_arrListCPACinitMessage.AddAsLast(l_strLastError);
          l_answer_CPACerror = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("CPAC - There is still an error with the CPAC Controller : "), Translate("Click Cancel to end the method or OK to go the next process step without connecting.  "), l_arrListCPACinitMessage);
          if (l_answer_CPACerror == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
          }
          if (l_answer_CPACerror == ASWGLOBAL::DIALOG::OK)
          {
            MECC::TraceComment(Translate("************ WARNING! Method will continue with the CPAC not working correctly ************"));
          }
        }
      }
      HSLInhecoTECLib::SetTraceLevel(1);
      HSLInhecoTECLib::GetFirmwareVersion(0, 1, l_strFirmWareVersion, l_strErrorCode);
      Trace ("Firmware version for CPAC:  ", l_strFirmWareVersion);
      _CPAC_ReportErrorText(l_strErrorCode);
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - CPAC INIT simulated"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete : CPAC_Init <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function HHS_Shake( variable i_intHHS, variable i_intSpeed, variable i_intShakingDuration ) void {
    private variable l_intCheckForEarlyStop;
    private variable l_intErrorCodeHHS;
    private variable l_fltActualShakingDurationHHS;
    private timer l_hdlTimerShaking;
    private variable l_strDisplayTextToStatusWindow;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  HHS_Shake <<<<<<<<<<"));
    Trace ("***** Now shaking on HHS", i_intHHS, " at ", i_intSpeed, "rpm for ", i_intShakingDuration, "seconds...");
    l_strDisplayTextToStatusWindow = StrConcat8(Translate("Shake on HHS "), i_intHHS, Translate(" at "), i_intSpeed, Translate(" rpm for "), i_intShakingDuration, Translate(" seconds ..."), Translate(""));
    VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      l_intErrorCodeHHS = HSLHamHeaterShaker::StartShaker(i_intHHS, i_intSpeed);
      _HHS_HandleReturnValue(l_intErrorCodeHHS);
      if( 0 == l_hdlTimerShaking.SetTimer(i_intShakingDuration) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      l_intCheckForEarlyStop = l_hdlTimerShaking.WaitTimer(hslTrue, hslTrue);
      if (0 == l_intCheckForEarlyStop)
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if (l_intCheckForEarlyStop == 3)
      {
        MECC::TraceComment(Translate("***** WARNING!  The shaking was stopped prematurely by the operator! *****"));
      }
      l_fltActualShakingDurationHHS = l_hdlTimerShaking.GetElapsedTime();
      Trace ("***** Actual Shaking Duration (seconds):  ", l_fltActualShakingDurationHHS);
      l_intErrorCodeHHS = HSLHamHeaterShaker::StopShaker(i_intHHS);
      _HHS_HandleReturnValue(l_intErrorCodeHHS);
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - HHS SHAKE simulated"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  HHS_Shake <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function HHS_SetTemperature( variable i_intHHS, variable i_fltTemperature ) void {
    private variable l_intErrorCodeHHS;
    private variable l_strDisplayTextToStatusWindow;
    private variable l_strTemperature;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  HHS_SetTemperature <<<<<<<<<<"));
    if (i_fltTemperature == 0)
    {
      l_strDisplayTextToStatusWindow = StrConcat4(Translate("Set temperature of Hamilton Heater Shaker to : "), Translate("room temperature"), Translate(". Module : "), i_intHHS);
    }
    else
    {
      l_strTemperature = StrFStr(i_fltTemperature);
      StrReplace(l_strTemperature, Translate("0000"), Translate(""));
      l_strDisplayTextToStatusWindow = StrConcat4(Translate("Set temperature of Hamilton Heater Shaker to : "), l_strTemperature, Translate(" °C. Adjusting temperature of module : "), i_intHHS);
    }
    VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      l_intErrorCodeHHS = HSLHamHeaterShaker::StopTempCtrl(i_intHHS);
      _HHS_HandleReturnValue(l_intErrorCodeHHS);
      if (i_fltTemperature != 0)
      {
        Trace ("***** HHS number ", i_intHHS, " is being set to ", i_fltTemperature, " C");
        HSLHamHeaterShaker::StartTempCtrl(i_intHHS, i_fltTemperature, 0);
      }
      else
      {
        Trace ("***** HHS number ", i_intHHS, " is not being controlled, as it is desired to be at room temperature.");
      }
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - HHS set temperature"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  HHS_SetTemperature <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function HHS_Terminate( variable i_intHHSDeviceNo1, variable i_intHHSDeviceNo2, variable i_intHHSDeviceNo3, variable i_intHHSDeviceNo4, variable i_intHHSDeviceNo5 ) void {
    private variable l_intErrorCodeHHS;
    private variable l_strDisplayTextToStatusWindow;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: HHS_Terminate <<<<<<<<<<"));
    l_strDisplayTextToStatusWindow = StrConcat4(Translate("Terminate devices : HHS1 to HHS5. "), Translate(""), Translate(""), Translate(""));
    VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      l_intErrorCodeHHS = HSLHamHeaterShaker::StopAllShaker();
      _HHS_HandleReturnValue(l_intErrorCodeHHS);
      Trace ("***** All HHS are not being controlled, as it is desired to be at room temperature.");
      if (i_intHHSDeviceNo1 != ASWGLOBAL::BOOL::FALSE)
      {
        l_intErrorCodeHHS = HSLHamHeaterShaker::StopTempCtrl(i_intHHSDeviceNo1);
        _HHS_HandleReturnValue(l_intErrorCodeHHS);
      }
      if (i_intHHSDeviceNo2 != ASWGLOBAL::BOOL::FALSE)
      {
        l_intErrorCodeHHS = HSLHamHeaterShaker::StopTempCtrl(i_intHHSDeviceNo2);
        _HHS_HandleReturnValue(l_intErrorCodeHHS);
      }
      if (i_intHHSDeviceNo3 != ASWGLOBAL::BOOL::FALSE)
      {
        l_intErrorCodeHHS = HSLHamHeaterShaker::StopTempCtrl(i_intHHSDeviceNo3);
        _HHS_HandleReturnValue(l_intErrorCodeHHS);
      }
      if (i_intHHSDeviceNo4 != ASWGLOBAL::BOOL::FALSE)
      {
        l_intErrorCodeHHS = HSLHamHeaterShaker::StopTempCtrl(i_intHHSDeviceNo4);
        _HHS_HandleReturnValue(l_intErrorCodeHHS);
      }
      if (i_intHHSDeviceNo5 != ASWGLOBAL::BOOL::FALSE)
      {
        l_intErrorCodeHHS = HSLHamHeaterShaker::StopTempCtrl(i_intHHSDeviceNo5);
        _HHS_HandleReturnValue(l_intErrorCodeHHS);
      }
      HSLHamHeaterShaker::Terminate();
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - Termination simulated"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: HHS_Terminate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function CPAC_SetTemperature( variable i_intCPACTemp ) void {
    private variable l_strErrorCode;
    private variable l_fltActualTemperatureCPAC;
    private variable l_fltCPACTemperature;
    private variable l_strDisplayTextToStatusWindow;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  CPAC_SetTemperature <<<<<<<<<<"));
    l_strDisplayTextToStatusWindow = StrConcat4(Translate("Set temperature of CPAC to : "), i_intCPACTemp, Translate(" °C."), Translate(" Adjusting temperature of module started..."));
    VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      HSLInhecoTECLib::GetActualDeviceTemperature(0, 1, 1, l_fltActualTemperatureCPAC, l_strErrorCode);
      Trace ("Current CPAC Temperature (in tenths of degrees):  ", l_fltActualTemperatureCPAC);
      _CPAC_ReportErrorText(l_strErrorCode);
      l_fltCPACTemperature = i_intCPACTemp / (1.0 * 1.0);
      HSLInhecoTECLib::SetTargetTemperature(0, 1, l_fltCPACTemperature, l_strErrorCode);
      _CPAC_ReportErrorText(l_strErrorCode);
      Trace ("CPAC Temperature float variable set to:  ", l_fltCPACTemperature);
      HSLInhecoTECLib::StartTemperatureControl(0, 1, l_strErrorCode);
      _CPAC_ReportErrorText(l_strErrorCode);
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - CPAC set temperature"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  CPAC_SetTemperature <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function CPAC_Terminate(  ) void {
    private variable l_strErrorCode;
    private variable l_strDisplayTextToStatusWindow;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: CPAC_Terminate <<<<<<<<<<"));
    l_strDisplayTextToStatusWindow = StrConcat4(Translate("Terminate device : CPAC. "), Translate(""), Translate(""), Translate(""));
    VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      HSLInhecoTECLib::StopTemperatureControl(0, 1, l_strErrorCode);
      _CPAC_ReportErrorText(l_strErrorCode);
      HSLInhecoTECLib::Terminate(ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - CPAC termination"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: CPAC_Terminate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function LiquidWasteSensor_Init( variable i_intComPort ) void {
    private variable l_blnRetValue;
    private variable l_intSensorStatus;
    private variable l_blnStartMonitoringStarted;
    private variable l_DialogReturn;
    private variable l_intSuccsess;
    private variable l_strTextblock;
    private variable l_blnSolidWasteContainerIsPresent;
    private variable l_intEndlessLoopCounter;
    private variable l_intCheckSolidWasteTrialNumber;
    private dialog dialogHandle_1;
    private variable l_strSensorMessage;
    private variable l_arrListLiquidWasteSensorMessage[];
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  LiquidWasteSensor_Init <<<<<<<<<<"));
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      l_intCheckSolidWasteTrialNumber = 0;
      l_blnRetValue = SensorLib::Initialize(i_intComPort);
      Trace ("------- return value of INIT Sensor: ", l_blnRetValue);
      if (l_blnRetValue == ASWGLOBAL::BOOL::TRUE)
      {
        Trace ("------- com port: ", i_intComPort);
        l_blnStartMonitoringStarted = ASWGLOBAL::BOOL::FALSE;
        {
          l_intEndlessLoopCounter = 0;
          while (1 == 1)
          {
            l_intEndlessLoopCounter = l_intEndlessLoopCounter + 1;
            l_intSuccsess = 0;
            l_intSensorStatus = SensorLib::CheckLiquid();
            if (l_intSensorStatus == 0)
            {
              l_strTextblock = Translate("Sensor activated. Liquid level reached the maximum level.    Or check cable connection to senor.");
              l_strSensorMessage = StrConcat2(Translate("Sensor status : "), l_strTextblock);
              l_arrListLiquidWasteSensorMessage.SetSize(0);
              l_arrListLiquidWasteSensorMessage.AddAsLast(l_strSensorMessage);
              l_DialogReturn = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Liquid waste sensor - Check liquid level at liquid waste carboy : "), Translate("Empty liquid waste carboy if full. Click Cancel to abort method or OK to proceed with the workflow."), l_arrListLiquidWasteSensorMessage);
              if (l_DialogReturn == ASWGLOBAL::DIALOG::CANCEL)
              {
                _DATA_IntegratedAbortHandler(Translate("NGSStarPrep.smt "), Translate("LiquidWasteSensor_Init. This smt checks if a solid waste is present (hall sensor at waste) and checks the liquid level within the liquid waste hall sensor. "));
              }
            }
            else
            {
              Trace ("------- Check liquid waste senor has been perfomed: Liquid level below maximum of carboy.");
              l_intSuccsess = l_intSuccsess + 1;
            }
            l_blnSolidWasteContainerIsPresent = SensorLib::CheckSolidWaste();
            Trace ("------- blnSolidWasteContainerIsPresent: ", l_blnSolidWasteContainerIsPresent);
            if (l_blnSolidWasteContainerIsPresent == 0)
            {
              l_strTextblock = Translate("Sensor activated. Solid waste not present.");
              l_strSensorMessage = StrConcat2(Translate("Sensor status : "), l_strTextblock);
              l_arrListLiquidWasteSensorMessage.SetSize(0);
              l_arrListLiquidWasteSensorMessage.AddAsLast(l_strSensorMessage);
              l_DialogReturn = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Solid waste sensor - Check solid waste carboy : "), Translate("Replace solid waste carboy if not present. Click Cancel to abort method or OK to proceed with the workflow."), l_arrListLiquidWasteSensorMessage);
              if (l_DialogReturn == ASWGLOBAL::DIALOG::CANCEL)
              {
                _DATA_IntegratedAbortHandler(Translate("NGSStarPrep.smt "), Translate("LiquidWasteSensor_Init. This smt checks if a solid waste is present (hall sensor at waste) and checks the liquid level within the liquid waste hall sensor. "));
              }
              l_intCheckSolidWasteTrialNumber = l_intCheckSolidWasteTrialNumber + 1;
              if (l_intCheckSolidWasteTrialNumber > 1)
              {
                dialogHandle_1.SetOutput(Translate("Select Yes to confirm that the solid waste has been replaced and continue the run OK select NO try tho detect the magnet again."));
                l_DialogReturn = dialogHandle_1.ShowOutput(Translate("Replaced solid waste by user"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
                if (l_DialogReturn == ASWGLOBAL::DIALOG::YES)
                {
                  Trace ("------- Check solid waste senor has been perfomed: USER confirmed that solid waste is present even if the sensor could not detect it.");
                  l_intSuccsess = l_intSuccsess + 1;
                  if (l_intSuccsess == 2)
                  {
                    MECC::TraceComment(Translate("Liquid waste below maximum AND solid waste present --> loop break activated.\n"));
                    break;
                  }
                }
              }
            }
            else
            {
              Trace ("------- Check solid waste senor has been perfomed: solid waste is present.");
              l_intSuccsess = l_intSuccsess + 1;
            }
            if (l_intSuccsess == 2)
            {
              MECC::TraceComment(Translate("Liquid waste below maximum AND solid waste present --> loop break activated.\n"));
              break;
            }
            Trace ("------- IntEndlessLoopCounter: ", l_intEndlessLoopCounter);
          }
        }
      }
      else
      {
        Trace ("------- Init liquid / solid waste senor has been perfomed: No comunication --> check com port settings. Or restart computer and powerswitch MLStar");
        VectorCustomDialogs::MessageDialog(Translate("Liquid Solid waste sensor - communication error"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("The sensor could not initialize. Check com port setting at init step. The method will abort."));
        _DATA_IntegratedAbortHandler(Translate("NGSStarPrep.smt "), Translate("LiquidWasteSensor_Init. This smt checks if a solid waste is present (hall sensor at waste) and checks the liquid level within the liquid waste hall sensor. "));
      }
    }
    else
    {
      Trace ("------- Check liquid / solid waste senor has been perfomed in simulation mode: Liquid level below maximum of carboy and solid waste is present.");
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  LiquidWasteSensor_Init <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _CPAC_ReportErrorText( variable i_strErrorCode ) void {
    private variable l_strDecodedErrorText;
    if (i_strErrorCode != "TEC_0")
    {
      if (i_strErrorCode != "000")
      {
        HSLInhecoTECLib::GetDescriptionForErrorCode(i_strErrorCode, l_strDecodedErrorText);
        Trace ("CPAC ERROR CODE:  ", i_strErrorCode);
        Trace ("CPAC ERROR DECODED MESSSAGE:  ", l_strDecodedErrorText);
        _DATA_IntegratedAbortHandler(Translate("NGSStarPrep.smt "), Translate("CPAC_Report Error handler has written more detailed information into the logfile."));
      }
    }
  }

  function HHS_CheckTemperature( variable i_intHHS, variable i_intHHSTemp ) void {
    private variable l_intErrorCodeHHS;
    private variable l_fltActualTemperatureHHS;
    private variable l_intCountTrialsToReachRequestedTemperature;
    private variable l_intReturnValue_HHScheckTemperature;
    private timer l_hdlTimerWait10seconds;
    private variable l_strDisplayTextToStatusWindow;
    private variable l_strTemperature;
    private variable l_strHHSTemp;
    private variable l_strActualTemperatureHHS;
    private variable l_arrListCheckHHSTemperatureMessage[];
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>> Submethod:  HHS_GetTemperature <<<<<"));
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      l_intErrorCodeHHS = HSLHamHeaterShaker::GetTemperature(i_intHHS, l_fltActualTemperatureHHS);
      l_strTemperature = StrFStr(l_fltActualTemperatureHHS);
      StrReplace(l_strTemperature, Translate("0000"), Translate(""));
      Trace ("***** The current temperature for HHS", i_intHHS, " is ", l_strTemperature, "C . Requested temperature : ", i_intHHSTemp, "*****");
      _HHS_HandleReturnValue(l_intErrorCodeHHS);
      if (i_intHHSTemp > 0)
      {
        if (l_fltActualTemperatureHHS > i_intHHSTemp)
        {
          {
            l_intCountTrialsToReachRequestedTemperature = 0;
            while (l_fltActualTemperatureHHS > i_intHHSTemp)
            {
              l_intCountTrialsToReachRequestedTemperature = l_intCountTrialsToReachRequestedTemperature + 1;
              if( 0 == l_hdlTimerWait10seconds.SetTimer(10) )
              {
                    MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 == l_hdlTimerWait10seconds.WaitTimer(hslFalse, hslFalse) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              l_intErrorCodeHHS = HSLHamHeaterShaker::GetTemperature(i_intHHS, l_fltActualTemperatureHHS);
              l_strTemperature = StrFStr(l_fltActualTemperatureHHS);
              StrReplace(l_strTemperature, Translate("0000"), Translate(""));
              l_strDisplayTextToStatusWindow = StrConcat8(Translate("HHS check temperature. Actual temperature : "), l_strTemperature, Translate(" °C. Requested temperature : "), i_intHHSTemp, Translate(" °C. Cooling down HHS "), i_intHHS, Translate("."), Translate(""));
              VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
              Trace ("***** The current temperature for HHS", i_intHHS, " is ", l_fltActualTemperatureHHS, "C . Requested temperature : ", i_intHHSTemp, "*****");
              _HHS_HandleReturnValue(l_intErrorCodeHHS);
              if (l_intCountTrialsToReachRequestedTemperature > 60)
              {
                l_strHHSTemp = StrIStr(i_intHHSTemp);
                l_strHHSTemp = StrConcat2(Translate("HHS requested temperature [°C] : "), l_strHHSTemp);
                l_strActualTemperatureHHS = StrFStr(l_fltActualTemperatureHHS);
                l_strActualTemperatureHHS = StrConcat2(Translate("HHS reached temperature [°C] : "), l_strActualTemperatureHHS);
                l_arrListCheckHHSTemperatureMessage.SetSize(0);
                l_arrListCheckHHSTemperatureMessage.AddAsLast(l_strHHSTemp);
                l_arrListCheckHHSTemperatureMessage.AddAsLast(l_strActualTemperatureHHS);
                l_intReturnValue_HHScheckTemperature = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("HHS - Check Temperature : "), Translate("It is taking a long time for the HHS to reach temperature. Click Cancel to abort the method OR OK to try to recover the method"), l_arrListCheckHHSTemperatureMessage);
              }
              if (l_intReturnValue_HHScheckTemperature == ASWGLOBAL::DIALOG::CANCEL)
              {
                abort;
              }
              if (l_intReturnValue_HHScheckTemperature == ASWGLOBAL::DIALOG::OK)
              {
                break;
              }
            }
          }
        }
        if (l_fltActualTemperatureHHS < i_intHHSTemp)
        {
          {
            l_intCountTrialsToReachRequestedTemperature = 0;
            while (l_fltActualTemperatureHHS < i_intHHSTemp)
            {
              l_intCountTrialsToReachRequestedTemperature = l_intCountTrialsToReachRequestedTemperature + 1;
              if( 0 == l_hdlTimerWait10seconds.SetTimer(10) )
              {
                    MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 == l_hdlTimerWait10seconds.WaitTimer(hslFalse, hslFalse) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              l_intErrorCodeHHS = HSLHamHeaterShaker::GetTemperature(i_intHHS, l_fltActualTemperatureHHS);
              Trace ("***** The current temperature for HHS", i_intHHS, " is ", l_fltActualTemperatureHHS, "C . Requested temperature : ", i_intHHSTemp, "*****");
              l_strDisplayTextToStatusWindow = StrConcat8(Translate("HHS check temperature. Actual temperature : "), l_fltActualTemperatureHHS, Translate(" °C. Requested temperature : "), i_intHHSTemp, Translate(" °C. Heating up HHS "), i_intHHS, Translate("."), Translate(""));
              VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
              _HHS_HandleReturnValue(l_intErrorCodeHHS);
              if (l_intCountTrialsToReachRequestedTemperature > 60)
              {
                l_strHHSTemp = StrIStr(i_intHHSTemp);
                l_strHHSTemp = StrConcat2(Translate("HHS requested temperature [°C] : "), l_strHHSTemp);
                l_strActualTemperatureHHS = StrFStr(l_fltActualTemperatureHHS);
                l_strActualTemperatureHHS = StrConcat2(Translate("HHS reached temperature [°C] : "), l_strActualTemperatureHHS);
                l_arrListCheckHHSTemperatureMessage.SetSize(0);
                l_arrListCheckHHSTemperatureMessage.AddAsLast(l_strHHSTemp);
                l_arrListCheckHHSTemperatureMessage.AddAsLast(l_strActualTemperatureHHS);
                l_intReturnValue_HHScheckTemperature = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("HHS - Check Temperature : "), Translate("It is taking a long time for the HHS to reach temperature. Click Cancel to abort the method OR OK to try to recover the method"), l_arrListCheckHHSTemperatureMessage);
              }
              if (l_intReturnValue_HHScheckTemperature == ASWGLOBAL::DIALOG::CANCEL)
              {
                abort;
              }
              if (l_intReturnValue_HHScheckTemperature == ASWGLOBAL::DIALOG::OK)
              {
                break;
              }
            }
          }
        }
      }
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - HHS get temperature"));
      Trace ("***** The current temperature for HHS", i_intHHS, " is ", l_fltActualTemperatureHHS, "C *****");
    }
    MECC::TraceComment(Translate(">>>>> Submethod Complete:  HHS_GetTemperature <<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _Version(  ) void {
  }

  function CPAC_CheckTemperature( variable i_intCPACTemp ) void {
    private variable l_strErrorCode;
    private variable l_fltActualTemperatureCPAC;
    private variable l_strGetTypeOfCurrentVariable;
    private variable l_intReturnValue_CPACcheckTemperature;
    private timer l_hdlTimerWait10seconds;
    private variable l_intCountTrialsToReachRequestedTemperature;
    private variable l_strDisplayTextToStatusWindow;
    private variable l_strTemperature;
    private variable l_strCPACTemp;
    private variable l_strActualTemperatureCPAC;
    private variable l_arrListCheckCPACTemperatureMessage[];
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  CPAC_CheckTemperature <<<<<<<<<<"));
    if (t_blnSimulationModeON == 0)
    {
      l_fltActualTemperatureCPAC = 0.0;
      HSLInhecoTECLib::GetActualDeviceTemperature(0, 1, 1, l_fltActualTemperatureCPAC, l_strErrorCode);
      l_strGetTypeOfCurrentVariable = StrGetType(l_fltActualTemperatureCPAC);
      Trace ("Expected max CPAC temperature:  ", i_intCPACTemp);
      Trace ("Get actual CPAC temperature:  ", l_fltActualTemperatureCPAC);
      Trace ("Get type of current variable (get temp):  ", l_strGetTypeOfCurrentVariable);
      _CPAC_ReportErrorText(l_strErrorCode);
      if (i_intCPACTemp > 0)
      {
        {
          l_intCountTrialsToReachRequestedTemperature = 0;
          while (l_fltActualTemperatureCPAC > i_intCPACTemp)
          {
            l_intCountTrialsToReachRequestedTemperature = l_intCountTrialsToReachRequestedTemperature + 1;
            if( 0 == l_hdlTimerWait10seconds.SetTimer(10) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == l_hdlTimerWait10seconds.WaitTimer(hslFalse, hslFalse) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            HSLInhecoTECLib::GetActualDeviceTemperature(0, 1, 1, l_fltActualTemperatureCPAC, l_strErrorCode);
            l_strTemperature = StrFStr(l_fltActualTemperatureCPAC);
            StrReplace(l_strTemperature, Translate("0000"), Translate(""));
            _CPAC_ReportErrorText(l_strErrorCode);
            l_strDisplayTextToStatusWindow = StrConcat8(Translate("CPAC check temperature. Actual temperature : "), l_strTemperature, Translate(" °C. Requested temperature : "), i_intCPACTemp, Translate(" °C. Cooling down CPAC."), Translate(""), Translate(""), Translate(""));
            VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
            Trace ("Current CPAC temperature:  ", l_fltActualTemperatureCPAC);
            if (l_intCountTrialsToReachRequestedTemperature > 60)
            {
              l_strCPACTemp = StrIStr(i_intCPACTemp);
              l_strCPACTemp = StrConcat2(Translate("CPAC requested temperature [°C] : "), l_strCPACTemp);
              l_strActualTemperatureCPAC = StrFStr(l_fltActualTemperatureCPAC);
              l_strActualTemperatureCPAC = StrConcat2(Translate("CPAC reached temperature [°C] : "), l_fltActualTemperatureCPAC);
              l_arrListCheckCPACTemperatureMessage.SetSize(0);
              l_arrListCheckCPACTemperatureMessage.AddAsLast(l_strCPACTemp);
              l_arrListCheckCPACTemperatureMessage.AddAsLast(l_strActualTemperatureCPAC);
              l_intReturnValue_CPACcheckTemperature = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("CPAC - Check Temperature Minimum : "), Translate("It is taking a long time for the CPAC to reach temperature. Click Cancel to abort the method OR OK to try to recover the method"), l_arrListCheckCPACTemperatureMessage);
              if (l_intReturnValue_CPACcheckTemperature == ASWGLOBAL::DIALOG::CANCEL)
              {
                abort;
              }
              l_intReturnValue_CPACcheckTemperature = VectorCustomDialogs::MessageDialog(Translate("CPAC recovery options"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Press YES to wait for the CPAC to reach the requested temperature OR NO to continue the Assay without waiting for CPAC to reach desired temperature."));
              if (l_intReturnValue_CPACcheckTemperature == ASWGLOBAL::DIALOG::NO)
              {
                break;
              }
            }
          }
        }
      }
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - CPAC check Temperature minimum simulated"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  CPAC_CheckTemperature <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_Init( variable i_strDeviceAddress, variable & o_intDeviceNum, variable i_strLocalIPAdress ) void {
    private variable l_strMessage;
    private variable l_intReturnValue;
    private variable l_strDeviceID;
    private variable l_strPmsID;
    private variable l_strState;
    private variable l_strCurrentTime;
    private variable l_blnLocked;
    private variable l_strTrace;
    private variable l_blnReturnValue;
    private variable l_blnReturn;
    private variable l_intCounterGetStatusODTC;
    private timer l_hdlTimerWaitForODTCStatus;
    o_intDeviceNum = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>>  Start Submethod : ODTC_Init<<<<<<<<<<"));
    Trace ("t_blnSimulationModeON:  ", t_blnSimulationModeON);
    Trace ("i_strLocalIPAdress:  ", i_strLocalIPAdress);
    Trace ("i_strDeviceAddress:  ", i_strDeviceAddress);
    t_strODTCMethodName = Translate("INIT procedure");
    Inheco_ODTC::Standard::SetTraceLevel(TRACE_LEVEL_DEBUG);
    l_blnReturnValue = Inheco_ODTC::Standard::Connect(i_strLocalIPAdress, i_strDeviceAddress, Translate(""), t_blnSimulationModeON, o_intDeviceNum, l_strMessage);
    _ODTC_HandleReturnValue(l_blnReturnValue, "INHECOODTCCONTROLLER::Initialize", l_intReturnValue, l_strMessage);
    l_blnReturn = Inheco_ODTC::Standard::Reset(o_intDeviceNum, t_blnSimulationModeON, 120, Translate(""), Translate(""), Translate(""), l_intReturnValue, l_strMessage);
    _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::ResetDevice", l_intReturnValue, l_strMessage);
    l_blnReturn = Inheco_ODTC::Standard::Initialize(o_intDeviceNum, Translate(""), l_intReturnValue, l_strMessage);
    _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::InitializeDevice", l_intReturnValue, l_strMessage);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      {
        for(l_intCounterGetStatusODTC = 0; l_intCounterGetStatusODTC < 10;)
        {
          l_intCounterGetStatusODTC = l_intCounterGetStatusODTC + 1;
          if( 0 == l_hdlTimerWaitForODTCStatus.SetTimer(3) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_hdlTimerWaitForODTCStatus.WaitTimer(hslTrue, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_blnReturn = Inheco_ODTC::Standard::GetStatus(o_intDeviceNum, l_strDeviceID, l_strState, l_blnLocked, l_strPmsID, l_strCurrentTime, l_intReturnValue, l_strMessage);
          l_strTrace = StrConcat12("l_strDeviceID = ", l_strDeviceID, ", l_strState = ", l_strState, ", l_blnLocked = ", l_blnLocked, ", l_strPMSID = ", l_strPmsID, ", l_strCurrentDeviceTime = ", l_strCurrentTime, ", l_intReturnValue = ", l_intReturnValue);
          l_strTrace = StrConcat4(l_strTrace, ", l_strMessage = ", l_strMessage, "");
          _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::GetStatus", l_intReturnValue, l_strTrace);
          if (l_strState == "idle")
          {
            Trace ("------- ODTC device state idle - ");
            break;
          }
          else
          {
            Trace ("------- ODTC device state NOT idle - loop break request denied - loop number : ", l_intCounterGetStatusODTC);
            Trace ("------- After 10 loops the there is an automatic loop break ");
            if (l_intCounterGetStatusODTC == 10)
            {
              if (l_strState != "idle")
              {
                _DATA_IntegratedAbortHandler(Translate("ODTC INIT"), Translate("ODTC communication or hardware problem - get in contact to Hamilton technology support."));
              }
            }
          }
        }
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete : ODTC_Init <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _ODTC_HandleReturnValue( variable i_blnSuccess, variable i_strFunctionName, variable i_intReturnValue, variable i_strMessage ) void {
    private variable l_retValueDialog;
    private variable l_strTrace;
    private variable l_strMethodName;
    private variable l_strReturnValueODTC;
    private variable l_strDeviceMessage;
    private variable l_strFunctionName;
    private variable l_arrListODTCtMessage[];
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      if (i_blnSuccess == ASWGLOBAL::BOOL::TRUE)
      {
        l_strTrace = StrConcat4("SiLA message was '", i_strMessage, "', SiLA return value was ", i_intReturnValue);
        Trace ("***** Trace successful message = ", l_strTrace);
        return;
      }
      else
      {
        l_strTrace = StrConcat4("SiLA message was '", i_strMessage, "', SiLA return value was ", i_intReturnValue);
        Trace ("***** Trace successful message = ", l_strTrace);
        l_strFunctionName = StrConcat2(Translate("Function name   : "), i_strFunctionName);
        l_strMethodName = StrConcat2(Translate("Method name    :"), t_strODTCMethodName);
        l_strDeviceMessage = StrConcat2(Translate("Device message :"), i_strMessage);
        l_strReturnValueODTC = StrIStr(i_intReturnValue);
        l_strReturnValueODTC = StrConcat2(Translate("Device return value :"), l_strReturnValueODTC);
        l_arrListODTCtMessage.SetSize(0);
        l_arrListODTCtMessage.AddAsLast(l_strFunctionName);
        l_arrListODTCtMessage.AddAsLast(l_strMethodName);
        l_arrListODTCtMessage.AddAsLast(l_strDeviceMessage);
        l_arrListODTCtMessage.AddAsLast(l_strReturnValueODTC);
        l_retValueDialog = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("ODTC - handle retrun value - action completed with error : "), Translate("Click Cancel to end the method or OK to go the next process step.  "), l_arrListODTCtMessage);
        if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
        }
      }
    }
  }

  function ODTC_Terminate( variable i_intDeviceNumber, variable i_blnOpenDoorRequested ) void {
    private variable l_strDeviceID;
    private variable l_intCounterGetStatusODTC;
    private variable l_strPmsID;
    private variable l_strState;
    private variable l_strMessage;
    private variable l_intReturnValue;
    private variable l_strCurrentTime;
    private variable l_blnLocked;
    private variable l_strTrace;
    private variable l_blnReturn;
    private timer l_hdlTimerWaitForODTCStatus;
    private variable l_strDisplayTextToStatusWindow;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Start Submethod : ODTC_Terminate <<<<<<<<<<"));
    l_strDisplayTextToStatusWindow = StrConcat4(Translate("Terminate device : ODTC. "), Translate(""), Translate(""), Translate(""));
    VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      t_strODTCMethodName = Translate("Stop");
      onerror goto errLabel_2 ;
      err.Clear();
      l_blnReturn = Inheco_ODTC::Standard::StopMethod(i_intDeviceNumber, Translate(""), l_intReturnValue, l_strMessage);
      Trace ("***** Return value ODTC function = ", l_blnReturn);
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
      }   /* end if from skip handler if no error */
      {
        for(l_intCounterGetStatusODTC = 0; l_intCounterGetStatusODTC < 10;)
        {
          l_intCounterGetStatusODTC = l_intCounterGetStatusODTC + 1;
          if( 0 == l_hdlTimerWaitForODTCStatus.SetTimer(3) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_hdlTimerWaitForODTCStatus.WaitTimer(hslTrue, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_blnReturn = Inheco_ODTC::Standard::GetStatus(i_intDeviceNumber, l_strDeviceID, l_strState, l_blnLocked, l_strPmsID, l_strCurrentTime, l_intReturnValue, l_strMessage);
          l_strTrace = StrConcat12("l_strDeviceID = ", l_strDeviceID, ", l_strState = ", l_strState, ", l_blnLocked = ", l_blnLocked, ", l_strPMSID = ", l_strPmsID, ", l_strCurrentDeviceTime = ", l_strCurrentTime, ", l_intReturnValue = ", l_intReturnValue);
          l_strTrace = StrConcat4(l_strTrace, ", l_strMessage = ", l_strMessage, "");
          _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::GetStatus", l_intReturnValue, l_strTrace);
          if (l_strState == "idle")
          {
            Trace ("------- ODTC device state idle - loop break activated to terminate device ");
            break;
          }
          else
          {
            Trace ("------- ODTC device state NOT idle - loop break request denied - loop number : ", l_intCounterGetStatusODTC);
            Trace ("------- After 10 loops the there is an automatic loop break to terminate comunication to the devcice - manual shut down needed");
            if (l_intCounterGetStatusODTC == 10)
            {
              if (l_strState != "idle")
              {
                _DATA_IntegratedAbortHandler(Translate("ODTC TERMINATE"), Translate("ODTC communication or hardware problem - get in contact to Hamilton technology support."));
              }
            }
          }
        }
      }
      if (i_blnOpenDoorRequested == ASWGLOBAL::BOOL::TRUE)
      {
        l_blnReturn = Inheco_ODTC::Standard::OpenDoor(i_intDeviceNumber, Translate(""), l_intReturnValue, l_strMessage);
        Trace ("***** Return value ODTC function = ", l_blnReturn);
        if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
        {
          {
            for(l_intCounterGetStatusODTC = 0; l_intCounterGetStatusODTC < 10;)
            {
              l_intCounterGetStatusODTC = l_intCounterGetStatusODTC + 1;
              if( 0 == l_hdlTimerWaitForODTCStatus.SetTimer(3) )
              {
                    MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 == l_hdlTimerWaitForODTCStatus.WaitTimer(hslTrue, hslFalse) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              l_blnReturn = Inheco_ODTC::Standard::GetStatus(i_intDeviceNumber, l_strDeviceID, l_strState, l_blnLocked, l_strPmsID, l_strCurrentTime, l_intReturnValue, l_strMessage);
              l_strTrace = StrConcat12("l_strDeviceID = ", l_strDeviceID, ", l_strState = ", l_strState, ", l_blnLocked = ", l_blnLocked, ", l_strPMSID = ", l_strPmsID, ", l_strCurrentDeviceTime = ", l_strCurrentTime, ", l_intReturnValue = ", l_intReturnValue);
              l_strTrace = StrConcat4(l_strTrace, ", l_strMessage = ", l_strMessage, "");
              _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::GetStatus", l_intReturnValue, l_strTrace);
              if (l_strState == "idle")
              {
                Trace ("------- ODTC device state idle - ");
                break;
              }
              else
              {
                Trace ("------- ODTC device state NOT idle - loop break request denied - loop number : ", l_intCounterGetStatusODTC);
                Trace ("------- After 10 loops the there is an automatic loop break");
                if (l_intCounterGetStatusODTC == 10)
                {
                  if (l_strState != "idle")
                  {
                    _DATA_IntegratedAbortHandler(Translate("ODTC TERMINATE"), Translate("ODTC communication or hardware problem - get in contact to Hamilton technology support."));
                  }
                }
              }
            }
          }
          t_strODTCMethodName = Translate("OPEN DOOR");
          _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::OpenDoor", l_intReturnValue, l_strMessage);
        }
      }
      l_blnReturn = Inheco_ODTC::Standard::Terminate(i_intDeviceNumber, l_strMessage);
      _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::Terminate", l_intReturnValue, l_strMessage);
    }
    MECC::TraceComment(Translate(">>>>>>>>>>  Submethod Complete : ODTC_Terminate <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_OpenDoor( variable i_intDeviceNumber ) void {
    private variable l_strMessage;
    private variable l_intReturnValue;
    private variable l_blnReturn;
    private variable l_strDeviceID;
    private variable l_intCounterGetStatusODTC;
    private variable l_strPmsID;
    private variable l_strState;
    private variable l_strCurrentTime;
    private variable l_blnLocked;
    private variable l_strTrace;
    private timer l_hdlTimerWaitForODTCStatus;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_OpenDoor:  Start Submethod <<<<<<<<<<"));
    l_blnReturn = Inheco_ODTC::Standard::OpenDoor(i_intDeviceNumber, Translate(""), l_intReturnValue, l_strMessage);
    Trace ("***** Return value ODTC function = ", l_blnReturn);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      {
        for(l_intCounterGetStatusODTC = 0; l_intCounterGetStatusODTC < 10;)
        {
          l_intCounterGetStatusODTC = l_intCounterGetStatusODTC + 1;
          if( 0 == l_hdlTimerWaitForODTCStatus.SetTimer(3) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_hdlTimerWaitForODTCStatus.WaitTimer(hslTrue, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_blnReturn = Inheco_ODTC::Standard::GetStatus(i_intDeviceNumber, l_strDeviceID, l_strState, l_blnLocked, l_strPmsID, l_strCurrentTime, l_intReturnValue, l_strMessage);
          l_strTrace = StrConcat12("l_strDeviceID = ", l_strDeviceID, ", l_strState = ", l_strState, ", l_blnLocked = ", l_blnLocked, ", l_strPMSID = ", l_strPmsID, ", l_strCurrentDeviceTime = ", l_strCurrentTime, ", l_intReturnValue = ", l_intReturnValue);
          l_strTrace = StrConcat4(l_strTrace, ", l_strMessage = ", l_strMessage, "");
          _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::GetStatus", l_intReturnValue, l_strTrace);
          if (l_strState == "idle")
          {
            Trace ("------- ODTC device state idle - ");
            break;
          }
          else
          {
            Trace ("------- ODTC device state NOT idle - loop break request denied - loop number : ", l_intCounterGetStatusODTC);
            Trace ("------- After 10 loops the there is an automatic loop break");
            if (l_intCounterGetStatusODTC == 10)
            {
              if (l_strState != "idle")
              {
                _DATA_IntegratedAbortHandler(Translate("ODTC OPEN DOOR"), Translate("ODTC communication or hardware problem - get in contact to Hamilton technology support."));
              }
            }
          }
        }
      }
      t_strODTCMethodName = Translate("OPEN DOOR");
      _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::OpenDoor", l_intReturnValue, l_strMessage);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_OpenDoor:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_CloseDoor( variable i_intDeviceNumber ) void {
    private variable l_strMessage;
    private variable l_intReturnValue;
    private variable l_strDeviceID;
    private variable l_intCounterGetStatusODTC;
    private variable l_strPmsID;
    private variable l_strState;
    private variable l_strCurrentTime;
    private variable l_blnLocked;
    private variable l_strTrace;
    private variable l_blnReturn;
    private timer l_hdlTimerWaitForODTCStatus;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_CloseDoor:  Start Submethod <<<<<<<<<<"));
    l_blnReturn = Inheco_ODTC::Standard::CloseDoor(i_intDeviceNumber, Translate(""), l_intReturnValue, l_strMessage);
    Trace ("***** Return value ODTC function = ", l_blnReturn);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      {
        for(l_intCounterGetStatusODTC = 0; l_intCounterGetStatusODTC < 10;)
        {
          l_intCounterGetStatusODTC = l_intCounterGetStatusODTC + 1;
          if( 0 == l_hdlTimerWaitForODTCStatus.SetTimer(3) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_hdlTimerWaitForODTCStatus.WaitTimer(hslTrue, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_blnReturn = Inheco_ODTC::Standard::GetStatus(i_intDeviceNumber, l_strDeviceID, l_strState, l_blnLocked, l_strPmsID, l_strCurrentTime, l_intReturnValue, l_strMessage);
          l_strTrace = StrConcat12("l_strDeviceID = ", l_strDeviceID, ", l_strState = ", l_strState, ", l_blnLocked = ", l_blnLocked, ", l_strPMSID = ", l_strPmsID, ", l_strCurrentDeviceTime = ", l_strCurrentTime, ", l_intReturnValue = ", l_intReturnValue);
          l_strTrace = StrConcat4(l_strTrace, ", l_strMessage = ", l_strMessage, "");
          _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::GetStatus", l_intReturnValue, l_strTrace);
          if (l_strState == "idle")
          {
            Trace ("------- ODTC device state idle - ");
            break;
          }
          else
          {
            Trace ("------- ODTC device state NOT idle - loop break request denied - loop number : ", l_intCounterGetStatusODTC);
            Trace ("------- After 10 loops the there is an automatic loop break ");
            if (l_intCounterGetStatusODTC == 10)
            {
              if (l_strState != "idle")
              {
                _DATA_IntegratedAbortHandler(Translate("ODTC CLOSE DOOR"), Translate("ODTC communication or hardware problem - get in contact to Hamilton technology support."));
              }
            }
          }
        }
      }
      t_strODTCMethodName = Translate("CLOSE DOOR");
      _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::CloseDoor", l_intReturnValue, l_strMessage);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_CloseDoor:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_WaitForStartedProtocolToFinish( variable i_intDeviceNumber, variable i_intTimeOut, variable i_intRequestIDToWaitFor ) void {
    private variable l_strPmsID;
    private variable l_strState;
    private variable l_strMessage;
    private variable l_strTrace;
    private variable l_intTimeToWait;
    private variable l_strDeviceID;
    private variable l_intReturnValue;
    private variable l_strCurrentTime;
    private variable l_blnLocked;
    private variable l_blnReturn;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_WaitForStartedProtocolToFinish:  Start Submethod <<<<<<<<<<"));
    l_intTimeToWait = i_intTimeOut + 20;
    l_strTrace = StrConcat2("Effective time to wait before an error is triggered = ", l_intTimeToWait);
    Trace ("***** Message = ", l_strTrace);
    l_blnReturn = Inheco_ODTC::Standard::WaitForEndOfExecuteMethod(i_intDeviceNumber, l_intTimeToWait, i_intRequestIDToWaitFor, l_intReturnValue, l_strMessage);
    Trace ("***** Return value ODTC function = ", l_blnReturn);
    _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::WaitForStartedProtocolToFinish", l_intReturnValue, l_strMessage);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      l_blnReturn = Inheco_ODTC::Standard::GetStatus(i_intDeviceNumber, l_strDeviceID, l_strState, l_blnLocked, l_strPmsID, l_strCurrentTime, l_intReturnValue, l_strMessage);
      l_strTrace = StrConcat12("l_strDeviceID = ", l_strDeviceID, ", l_strState = ", l_strState, ", l_blnLocked = ", l_blnLocked, ", l_strPMSID = ", l_strPmsID, ", l_strCurrentDeviceTime = ", l_strCurrentTime, ", l_intReturnValue = ", l_intReturnValue);
      l_strTrace = StrConcat4(l_strTrace, ", l_strMessage = ", l_strMessage, "");
      _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::GetStatus", l_intReturnValue, l_strTrace);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_WaitForStartedProtocolToFinish:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_ExecuteProtocol( variable i_intDeviceNumber, variable i_strProtocollFullFileName, variable i_strNameOfProtocollOnDevice, variable & o_intTimeForProtocol, variable & o_intRequestIDForActiveProtocol, variable i_blnShortenPreheatingMethodsTo40Seconds ) void {
    private variable l_intPriority;
    private variable l_strMessage;
    private variable l_intReturnValue;
    private variable l_strTrace;
    private variable l_strDisplayTextToStatusWindow;
    private variable l_fltDurationOfProtocolInMinutes;
    private variable l_blnReturn;
    o_intTimeForProtocol = 0;
    o_intRequestIDForActiveProtocol = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_ExecuteProtocol:  Start Submethod <<<<<<<<<<"));
    Trace ("------- ODTC device script to be perfomed: ", i_strProtocollFullFileName);
    l_strDisplayTextToStatusWindow = StrConcat4(Translate("ODTC execute protocol : "), i_strProtocollFullFileName, Translate(" ; Script : "), i_strNameOfProtocollOnDevice);
    VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    if (i_blnShortenPreheatingMethodsTo40Seconds == ASWGLOBAL::BOOL::TRUE)
    {
      l_intPriority = 10000;
    }
    else
    {
      l_intPriority = 10;
    }
    l_blnReturn = Inheco_ODTC::Standard::ExecuteMethod(i_intDeviceNumber, Translate(""), i_strNameOfProtocollOnDevice, l_intPriority, o_intTimeForProtocol, o_intRequestIDForActiveProtocol, l_intReturnValue, l_strMessage);
    t_strODTCMethodName = i_strNameOfProtocollOnDevice;
    l_strTrace = StrConcat8("o_intTimeForProtocol= ", o_intTimeForProtocol, ", o_intRequestIDForActiveProtocol = ", o_intRequestIDForActiveProtocol, ", l_intReturnValue = ", l_intReturnValue, ", l_strMessage = ", l_strMessage);
    l_fltDurationOfProtocolInMinutes = o_intTimeForProtocol / (60 * 1.0);
    l_fltDurationOfProtocolInMinutes = MthFloor(l_fltDurationOfProtocolInMinutes);
    l_strDisplayTextToStatusWindow = StrConcat4(Translate("Duration of running protocol : "), l_fltDurationOfProtocolInMinutes, Translate(" minutes."), Translate(""));
    VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::ExecuteProtocol", l_intReturnValue, l_strTrace);
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_ExecuteProtocol:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function DATA_HandOverSimulationModeForAllLocalSMTs( variable i_blnSimulationON, variable i_blnShowUVGUI ) void {
    private variable l_intReturnValue_DialogUV;
    private variable l_arrListUVMessage[];
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod: HandOverSimulationModeForAllLocalSMTs <<<<<<<<<<"));
    t_blnSimulationModeON = i_blnSimulationON;
    Trace ("Simulation mode for NGSStarPrep SMT:  ", t_blnSimulationModeON);
    t_intMasterMixNumber = 0;
    if (i_blnShowUVGUI == ASWGLOBAL::BOOL::TRUE)
    {
      t_arrPositionsMasterMix.SetSize(0);
      t_arrQuantitiesMasterMix.SetSize(0);
      t_arrDescriptionsMasterMix.SetSize(0);
      l_arrListUVMessage.SetSize(0);
      l_arrListUVMessage.AddAsLast(Translate("Do you want to use the UV kit?"));
      l_arrListUVMessage.AddAsLast(Translate(""));
      l_arrListUVMessage.AddAsLast(Translate("To close this method and start UV decontamination method seperately press YES ."));
      l_arrListUVMessage.AddAsLast(Translate("To skip this option (no UV Kit installed or UV decontamination has already been executed) press NO to continue the run."));
      l_intReturnValue_DialogUV = VectorCustomDialogs::ListDialog(Translate("Activate optional UV decontamination"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate(""), Translate(""), l_arrListUVMessage);
      if (l_intReturnValue_DialogUV == ASWGLOBAL::DIALOG::YES)
      {
        abort;
      }
    }
    else
    {
      MECC::TraceComment(Translate("User do not use the UV option"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: HandOverSimulationModeForAllLocalSMTs <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_DownloadProtocol( variable i_intDeviceNumber, variable i_strProtocollFullFileName ) void {
    private variable l_strMessage;
    private variable l_intReturnValue;
    private variable l_strDeviceID;
    private variable l_intCounterGetStatusODTC;
    private variable l_strPmsID;
    private variable l_strState;
    private variable l_strCurrentTime;
    private variable l_blnLocked;
    private variable l_strTrace;
    private variable l_blnReturn;
    private timer l_hdlTimerWaitForODTCStatus;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_DownloadProtocol:  Start Submethod <<<<<<<<<<"));
    Trace ("------- ODTC device script to be perfomed: ", i_strProtocollFullFileName);
    l_blnReturn = Inheco_ODTC::Standard::DownloadProtocol(i_intDeviceNumber, Translate(""), i_strProtocollFullFileName, l_intReturnValue, l_strMessage);
    Trace ("***** Return value ODTC function = ", l_blnReturn);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      {
        for(l_intCounterGetStatusODTC = 0; l_intCounterGetStatusODTC < 10;)
        {
          l_intCounterGetStatusODTC = l_intCounterGetStatusODTC + 1;
          if( 0 == l_hdlTimerWaitForODTCStatus.SetTimer(3) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_hdlTimerWaitForODTCStatus.WaitTimer(hslTrue, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_blnReturn = Inheco_ODTC::Standard::GetStatus(i_intDeviceNumber, l_strDeviceID, l_strState, l_blnLocked, l_strPmsID, l_strCurrentTime, l_intReturnValue, l_strMessage);
          l_strTrace = StrConcat12("l_strDeviceID = ", l_strDeviceID, ", l_strState = ", l_strState, ", l_blnLocked = ", l_blnLocked, ", l_strPMSID = ", l_strPmsID, ", l_strCurrentDeviceTime = ", l_strCurrentTime, ", l_intReturnValue = ", l_intReturnValue);
          l_strTrace = StrConcat4(l_strTrace, ", l_strMessage = ", l_strMessage, "");
          _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::GetStatus", l_intReturnValue, l_strTrace);
          if (l_strState == "idle")
          {
            Trace ("------- ODTC device state idle - ");
            break;
          }
          else
          {
            Trace ("------- ODTC device state NOT idle - loop break request denied - loop number : ", l_intCounterGetStatusODTC);
            Trace ("------- After 10 loops the there is an automatic loop break ");
            if (l_intCounterGetStatusODTC == 10)
            {
              if (l_strState != "idle")
              {
                _DATA_IntegratedAbortHandler(Translate("ODTC Download Protocol"), Translate("ODTC communication or hardware problem - get in contact to Hamilton technology support."));
              }
            }
          }
        }
      }
      t_strODTCMethodName = Translate("Download protocol");
      _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::DownloadProtocol", l_intReturnValue, l_strMessage);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_DownloadProtocol:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function DATA_ReadInputWorklistExcelOrCSVFormat( variable i_strSamplePlateFile, sequence i_seqSourceALPTemplate, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & o_arrIndex1SeqPositions[], variable & o_arrIndex1IDs[], variable & o_arrIndex2SeqPositions[], variable & o_arrIndex2IDs[], variable & o_arrALPseqLabID[], variable & o_arrALPseqPositions[], variable & o_strIndexLabwareFormat ) void {
    private variable io_arrSampleSeqPositions[];
    private variable io_arrSampleID[];
    private variable io_arrIndex1ID[];
    private variable io_arrIndex2ID[];
    private variable l_fileInputWkl_Sample_ID;
    private variable l_fileInputWkl_Index2_ID;
    private variable l_fileInputWkl_Index1_Pos;
    private variable l_fileInputWkl_Index2_Pos;
    private variable l_fileInputWkl_Index1_ID;
    private variable l_fileInputWkl_Sample_Position;
    private variable l_strTempLabIDSrcSeq;
    private variable l_intReturnFromArray;
    private variable l_intSizeArrIndex1Positions;
    private variable l_intSizeArrIndex2Positions;
    private variable l_blnPositionFound;
    private variable l_strCoordinate;
    private variable l_strFileTypeExtension;
    private file l_hdlFileInputWorkList;
    private variable l_intCountWorkListLines;
    private variable l_intCountColumns;
    private variable l_intCountRows;
    private variable l_arr_strCoordinateLetter[];
    private variable l_arr_strCoordinates[];
    private variable l_strDisplayTextToStatusWindow;
    o_intNumberOfSamples = 0;
    o_intIndexesUsedSetting = 0;
    o_strIndexLabwareFormat = 0;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> Submethod:  DATA_ReadInputWorklistExcelFormat <<<<<<<<<<"));
    i_seqSourceALPTemplate.SetCurrentPosition(1);
    l_strTempLabIDSrcSeq = SeqGetLabwareId(i_seqSourceALPTemplate);
    io_arrSampleID.SetSize(0);
    io_arrSampleSeqPositions.SetSize(0);
    io_arrIndex1ID.SetSize(0);
    o_arrIndex1SeqPositions.SetSize(0);
    io_arrIndex2ID.SetSize(0);
    o_arrIndex2SeqPositions.SetSize(0);
    o_arrALPseqLabID.SetSize(0);
    l_strFileTypeExtension = HSLExtensions::File::GetFileExtension(i_strSamplePlateFile);
    l_strDisplayTextToStatusWindow = StrConcat2(Translate("Read input worklist : "), i_strSamplePlateFile);
    VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    if (l_strFileTypeExtension == "csv")
    {
      onerror goto errLabel_3 ;
      err.Clear();
      l_hdlFileInputWorkList.AddField("Sample_ID", l_fileInputWkl_Sample_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Sample_Position", l_fileInputWkl_Sample_Position, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index1_ID", l_fileInputWkl_Index1_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index1_Pos", l_fileInputWkl_Index1_Pos, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index2_ID", l_fileInputWkl_Index2_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index2_Pos", l_fileInputWkl_Index2_Pos, hslString, 255);
      l_hdlFileInputWorkList.SetDelimiter(";");
      if( 0 == l_hdlFileInputWorkList.Open(i_strSamplePlateFile, hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strSamplePlateFile, "HxMetEdCompCmd");
      }
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        _DATA_IntegratedAbortHandler(Translate("NGSStarPrep.smt "), Translate("DATA_ReadInputWorklist - CSVFormat. Read the specified file, determine number of samples, and determine if Indexing will be used. Creates arrays of labware ID and position IDs."));
      }   /* end if from skip handler if no error */
    }
    if (l_strFileTypeExtension == "xls")
    {
      onerror goto errLabel_4 ;
      err.Clear();
      l_hdlFileInputWorkList.AddField("Sample_ID", l_fileInputWkl_Sample_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Sample_Position", l_fileInputWkl_Sample_Position, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index1_ID", l_fileInputWkl_Index1_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index1_Pos", l_fileInputWkl_Index1_Pos, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index2_ID", l_fileInputWkl_Index2_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index2_Pos", l_fileInputWkl_Index2_Pos, hslString, 255);
      if( 0 == l_hdlFileInputWorkList.Open(i_strSamplePlateFile + " " + "Sheet1$", hslRead, "Select * from [Sheet1$] where [Sample_Position] is not null") )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strSamplePlateFile, "HxMetEdCompCmd");
      }
      errLabel_4 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        _DATA_IntegratedAbortHandler(Translate("NGSStarPrep.smt "), Translate("DATA_ReadInputWorklist - ExcelFormat. Read the specified file, determine number of samples, and determine if Indexing will be used. Creates arrays of labware ID and position IDs."));
      }   /* end if from skip handler if no error */
    }
    if (l_strFileTypeExtension != "xls")
    {
      if (l_strFileTypeExtension != "csv")
      {
        VectorCustomDialogs::MessageDialog(Translate("Plausibility check : read worklist - file extenstion - exeption"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Wrong input format detected. Current file format : Allowed input formats : *.xls or *.csv. Please change your input file accordingly allowed formats."));
      }
    }
    {
      l_intCountWorkListLines = 0;
      while (
         (l_hdlFileInputWorkList.Eof() == 0)
      )
      {
        l_intCountWorkListLines = l_intCountWorkListLines + 1;
        APPSLIB::TraceValues(Translate("Records in Excel File: "), l_intCountWorkListLines, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        if( 0 == l_hdlFileInputWorkList.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (l_fileInputWkl_Sample_Position != "")
        {
          io_arrSampleID.AddAsLast(l_fileInputWkl_Sample_ID);
          o_arrALPseqLabID.AddAsLast(l_strTempLabIDSrcSeq);
          o_arrALPseqPositions.AddAsLast(l_fileInputWkl_Sample_Position);
          o_arrIndex1IDs.AddAsLast(l_fileInputWkl_Index1_ID);
          o_arrIndex1SeqPositions.AddAsLast(l_fileInputWkl_Index1_Pos);
          o_arrIndex2IDs.AddAsLast(l_fileInputWkl_Index2_ID);
          o_arrIndex2SeqPositions.AddAsLast(l_fileInputWkl_Index2_Pos);
        }
      }
    }
    Util2::Debug::TraceArray_3(Translate(" Arrays of Positions for Samples and Indexes"), o_arrALPseqPositions, o_arrIndex1SeqPositions, o_arrIndex2SeqPositions);
    Util2::Debug::TraceArray_3(Translate(" Arrays of ID for Samples and Indexes"), io_arrSampleID, o_arrIndex1IDs, o_arrIndex2IDs);
    l_arr_strCoordinateLetter.SetSize(0);
    l_arr_strCoordinateLetter.AddAsLast(Translate("A"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("B"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("C"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("D"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("E"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("F"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("G"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("H"));
    l_arr_strCoordinates.SetSize(0);
    {
      for(l_intCountColumns = 0; l_intCountColumns < 12;)
      {
        l_intCountColumns = l_intCountColumns + 1;
        {
          for(l_intCountRows = 0; l_intCountRows < 8;)
          {
            l_intCountRows = l_intCountRows + 1;
            l_strCoordinate = StrConcat2(l_arr_strCoordinateLetter.ElementAt( l_intCountRows -1), l_intCountColumns);
            l_arr_strCoordinates.AddAsLast(l_strCoordinate);
          }
        }
      }
    }
    l_blnPositionFound = APPSLIB::ArrayLookup(l_arr_strCoordinates, o_arrIndex1SeqPositions.ElementAt( 1 -1), l_intReturnFromArray);
    if (l_blnPositionFound == ASWGLOBAL::BOOL::TRUE)
    {
      o_strIndexLabwareFormat = Translate("plate");
    }
    else
    {
      o_strIndexLabwareFormat = Translate("tube");
    }
    o_intNumberOfSamples=io_arrSampleID.GetSize();
    l_intSizeArrIndex1Positions=o_arrIndex1SeqPositions.GetSize();
    l_intSizeArrIndex2Positions=o_arrIndex2SeqPositions.GetSize();
    if (l_intSizeArrIndex2Positions != 0)
    {
      o_intIndexesUsedSetting = 2;
    }
    else
    {
      if (l_intSizeArrIndex1Positions == 0)
      {
        o_intIndexesUsedSetting = 0;
      }
      else
      {
        o_intIndexesUsedSetting = 1;
      }
    }
    if( 0 != l_hdlFileInputWorkList.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlFileInputWorkList.RemoveFields();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: DATA_ReadSamplePlateFile <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void {
    private variable l_strAffectedLibrary;
    private variable l_strAbortMessage;
    private variable l_arrListAbortHandlerMessage[];
    l_strAffectedLibrary = StrConcat2(Translate("Affected library :    "), i_strFunctionName);
    l_strAbortMessage = StrConcat2(Translate("Message : "), i_strAbortMessage);
    l_arrListAbortHandlerMessage.SetSize(0);
    l_arrListAbortHandlerMessage.AddAsLast(l_strAffectedLibrary);
    l_arrListAbortHandlerMessage.AddAsLast(l_strAbortMessage);
    VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Internal abort handler activated - error occurred - abort routine started"), Translate("Press OK to Abort the run."), l_arrListAbortHandlerMessage);
    abort;
  }

  private function _HHS_HandleReturnValue( variable i_intErrorCode ) void {
    private variable l_strDecodedErrorText;
    private variable l_strErrorMessage;
    if (i_intErrorCode != 0)
    {
      if (i_intErrorCode == 1)
      {
        l_strDecodedErrorText = Translate("Fatal error.");
      }
      if (i_intErrorCode == 2)
      {
        l_strDecodedErrorText = Translate("Used node is not initialized.");
      }
      if (i_intErrorCode == 3)
      {
        l_strDecodedErrorText = Translate("Device not connected.");
      }
      if (i_intErrorCode == 4)
      {
        l_strDecodedErrorText = Translate("CAN error.");
      }
      if (i_intErrorCode == 5)
      {
        l_strDecodedErrorText = Translate("No communication to EEPROM.");
      }
      if (i_intErrorCode == 6)
      {
        l_strDecodedErrorText = Translate("Unknown command.");
      }
      if (i_intErrorCode == 7)
      {
        l_strDecodedErrorText = Translate("Unknown parameter.");
      }
      if (i_intErrorCode == 8)
      {
        l_strDecodedErrorText = Translate("Parameter out of range.");
      }
      if (i_intErrorCode == 9)
      {
        l_strDecodedErrorText = Translate("Voltage outside permitted range.");
      }
      if (i_intErrorCode == 10)
      {
        l_strDecodedErrorText = Translate("Stop received.");
      }
      if (i_intErrorCode == 11)
      {
        l_strDecodedErrorText = Translate("Wrong system address.");
      }
      if (i_intErrorCode == 12)
      {
        l_strDecodedErrorText = Translate("Parallel commands are nor allowed.");
      }
      if (i_intErrorCode == 13)
      {
        l_strDecodedErrorText = Translate("Shaker initialization failed.");
      }
      if (i_intErrorCode == 14)
      {
        l_strDecodedErrorText = Translate("Shaker not initialized.");
      }
      if (i_intErrorCode == 15)
      {
        l_strDecodedErrorText = Translate("Shaker step loss.");
      }
      if (i_intErrorCode == 16)
      {
        l_strDecodedErrorText = Translate("Shaker start mode.");
      }
      if (i_intErrorCode == 17)
      {
        l_strDecodedErrorText = Translate("Plate lock initialization failed.");
      }
      if (i_intErrorCode == 18)
      {
        l_strDecodedErrorText = Translate("Plate lock not initialized.");
      }
      if (i_intErrorCode == 19)
      {
        l_strDecodedErrorText = Translate("Plate lock step loss.");
      }
      if (i_intErrorCode == 20)
      {
        l_strDecodedErrorText = Translate("Temperature controlling not started.");
      }
      if (i_intErrorCode == 21)
      {
        l_strDecodedErrorText = Translate("Time out of temperature supervision.");
      }
      if (i_intErrorCode == 22)
      {
        l_strDecodedErrorText = Translate("Temperature out of supervision range.");
      }
      if (i_intErrorCode == 23)
      {
        l_strDecodedErrorText = Translate("Temperature out of security range.");
      }
      if (i_intErrorCode == 24)
      {
        l_strDecodedErrorText = Translate("Temperature sensor problem.");
      }
      if (i_intErrorCode == 25)
      {
        l_strDecodedErrorText = Translate("Time out during send of a command.");
      }
      if (i_intErrorCode == 26)
      {
        l_strDecodedErrorText = Translate("Unknown firmware error.");
      }
      if (i_intErrorCode == 27)
      {
        l_strDecodedErrorText = Translate("Input parameter must be an string.");
      }
      if (i_intErrorCode == 28)
      {
        l_strDecodedErrorText = Translate("Input parameter must be an integer.");
      }
      if (i_intErrorCode == 29)
      {
        l_strDecodedErrorText = Translate("Input parameter must be an double.");
      }
      if (i_intErrorCode == 30)
      {
        l_strDecodedErrorText = Translate("Needed node not installed or switched off.");
      }
      if (i_intErrorCode == 31)
      {
        l_strDecodedErrorText = Translate("Unknown firmware result string format.");
      }
      if (i_intErrorCode == 32)
      {
        l_strDecodedErrorText = Translate("Wrong length of parameter.");
      }
      Trace ("HHS ERROR CODE:  ", i_intErrorCode);
      Trace ("HHS ERROR DECODED MESSSAGE:  ", l_strDecodedErrorText);
      l_strErrorMessage = StrConcat8(Translate("CPAC_Report Error handler has written more detailed information into the logfile."), Translate("HHS ERROR CODE:  "), i_intErrorCode, Translate("HHS ERROR DECODED MESSSAGE:  "), l_strDecodedErrorText, Translate(""), Translate(""), Translate(""));
      _DATA_IntegratedAbortHandler(Translate("NGSStarPrep.smt "), l_strErrorMessage);
    }
  }

  function ODTC_WaitForLidAndBlockCorrectTemperature( variable i_intDeviceNumber, variable i_fltRequestedBlockTemperature, variable i_fltRequestedLidTemperature ) void {
    private variable l_strDeviceID;
    private variable l_fltMaxAllowedLidTemperature;
    private variable l_fltMinAllowedMountTemperature;
    private variable l_fltMaxAllowedMountTemperature;
    private variable l_strPmsID;
    private variable l_fltActualMountTemperature;
    private variable l_strTime;
    private variable l_strMessage;
    private variable l_strState;
    private variable l_intReturnValue;
    private variable l_fltActualLidTemperature;
    private variable l_strCurrentTime;
    private variable l_blnLocked;
    private variable l_strTrace;
    private variable l_fltMinAllowedLidTemperature;
    private variable l_blnReturn;
    private variable l_repeatLoop;
    private variable l_intLidTemperature;
    private variable l_intEvaluatingTemperature;
    private variable l_intMountTemperature;
    private variable l_intTemperatureLidMount;
    private timer l_hdlTimerWaitForTemperature;
    private variable l_arrFltActualTemperatures[];
    private variable l_arrStrActualTemperatures[];
    private variable l_intCounterToEvaluateLidAndBlockTemperatures;
    private variable l_strDisplayTextToStatusWindow;
    private dialog dialogHandle_5;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_WaitForLidAndBlockCorrectTemperature:  Start Submethod <<<<<<<<<<"));
    Trace ("------- Requested Block Temperature: ", i_fltRequestedBlockTemperature);
    Trace ("------- Requested Lid   Temperature: ", i_fltRequestedLidTemperature);
    l_fltMaxAllowedLidTemperature = i_fltRequestedLidTemperature + 15;
    l_fltMinAllowedLidTemperature = i_fltRequestedLidTemperature - 5;
    l_fltMaxAllowedMountTemperature = i_fltRequestedBlockTemperature + 0.5;
    l_fltMinAllowedMountTemperature = i_fltRequestedBlockTemperature - 0.5;
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      l_blnReturn = Inheco_ODTC::Standard::GetStatus(i_intDeviceNumber, l_strDeviceID, l_strState, l_blnLocked, l_strPmsID, l_strCurrentTime, l_intReturnValue, l_strMessage);
      l_strTrace = StrConcat12("l_strDeviceID = ", l_strDeviceID, ", l_strState = ", l_strState, ", l_blnLocked = ", l_blnLocked, ", l_strPMSID = ", l_strPmsID, ", l_strCurrentDeviceTime = ", l_strCurrentTime, ",l_intReturnValue = ", l_intReturnValue);
      l_strTrace = StrConcat4(l_strTrace, ", l_strMessage = ", l_strMessage, "");
      _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::GetStatus", l_intReturnValue, l_strTrace);
    }
    l_blnReturn = Inheco_ODTC::Standard::ReadActualTemperature(i_intDeviceNumber, Translate(""), l_strTime, l_arrFltActualTemperatures, l_arrStrActualTemperatures, l_intReturnValue, l_strMessage);
    _ODTC_HandleReturnValue(l_blnReturn, "Inheco_ODTC::Standard::ReadActualTemperature", l_intReturnValue, l_strMessage);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("Read Current Temperature for Lid and Block ***simulated with fake values"));
      l_fltActualLidTemperature = i_fltRequestedLidTemperature + 2;
      l_fltActualMountTemperature = i_fltRequestedBlockTemperature + 2;
    }
    else
    {
      Util2::Debug::TraceArray(Translate("l_arrFltActualTemperatures"), l_arrFltActualTemperatures);
      l_fltActualLidTemperature=l_arrFltActualTemperatures.GetAt(4-1);
      l_fltActualMountTemperature=l_arrFltActualTemperatures.GetAt(6-1);
    }
    Trace ("------- Actual Block Temperature: ", l_fltActualMountTemperature);
    Trace ("------- Actual Lid   Temperature: ", l_fltActualLidTemperature);
    l_repeatLoop = 1;
    l_intEvaluatingTemperature = 0;
    {
      l_intCounterToEvaluateLidAndBlockTemperatures = 0;
      while (1 == 1)
      {
        l_intCounterToEvaluateLidAndBlockTemperatures = l_intCounterToEvaluateLidAndBlockTemperatures + 1;
        if( 0 == l_hdlTimerWaitForTemperature.SetTimer(10) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == l_hdlTimerWaitForTemperature.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_intMountTemperature = 0;
        l_intLidTemperature = 0;
        l_blnReturn = Inheco_ODTC::Standard::ReadActualTemperature(i_intDeviceNumber, Translate(""), l_strTime, l_arrFltActualTemperatures, l_arrStrActualTemperatures, l_intReturnValue, l_strMessage);
        _ODTC_HandleReturnValue(l_blnReturn, "Inheco_ODTC::Standard::ReadActualTemperature", l_intReturnValue, l_strMessage);
        if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
        {
          MECC::TraceComment(Translate("Read Current Temperature for Lid and Block ***simulated with fake values"));
          l_fltActualLidTemperature = i_fltRequestedLidTemperature + 2;
          l_fltActualMountTemperature = i_fltRequestedBlockTemperature + 2;
        }
        else
        {
          l_fltActualLidTemperature=l_arrFltActualTemperatures.GetAt(4-1);
          l_fltActualMountTemperature=l_arrFltActualTemperatures.GetAt(6-1);
        }
        Trace ("------- Actual Block Temperature: ", l_fltActualMountTemperature);
        Trace ("------- Actual Lid   Temperature: ", l_fltActualLidTemperature);
        Trace ("------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- -------");
        if (l_fltActualLidTemperature >= l_fltMinAllowedLidTemperature)
        {
          if (l_fltActualLidTemperature <= l_fltMaxAllowedLidTemperature)
          {
            l_intLidTemperature = 1;
          }
          else
          {
            l_intLidTemperature = 0;
          }
        }
        else
        {
          l_intLidTemperature = 0;
        }
        if (l_intLidTemperature == 0)
        {
          Trace ("-------  Requested Lid Temperature = ",i_fltRequestedLidTemperature," not reached yet. Current Lid Temperature ", l_fltActualLidTemperature );
          Trace ("------- Minimum Lid Temperature allowed: ", l_fltMinAllowedLidTemperature);
          Trace ("------- Maximum Lid Temperature allowed: ", l_fltMaxAllowedLidTemperature);
          Trace ("------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- -------");
        }
        if (l_fltActualMountTemperature >= l_fltMinAllowedMountTemperature)
        {
          if (l_fltActualMountTemperature <= l_fltMaxAllowedMountTemperature)
          {
            l_intMountTemperature = 1;
          }
          else
          {
            l_intMountTemperature = 0;
          }
        }
        else
        {
          l_intMountTemperature = 0;
        }
        if (l_intMountTemperature == 0)
        {
          Trace ("-------  Requested Block Temperature = ",i_fltRequestedBlockTemperature," not reached yet. Current Block Temperature ", l_fltActualMountTemperature );
          Trace ("------- Minimum Block Temperature allowed: ", l_fltMinAllowedMountTemperature);
          Trace ("------- Maximum Block Temperature allowed: ", l_fltMaxAllowedMountTemperature);
          Trace ("------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- -------");
        }
        l_intTemperatureLidMount = l_intLidTemperature + l_intMountTemperature;
        if (l_intTemperatureLidMount == 2)
        {
          Trace ("------- Temperatures for Block and Lid have been reached. Now evaluating stability...");
          l_intEvaluatingTemperature = l_intEvaluatingTemperature + 1;
          if (l_intEvaluatingTemperature == 3)
          {
            break;
          }
        }
        l_strDisplayTextToStatusWindow = StrConcat12(Translate("ODTC waiting to reach bock temperature : "), i_fltRequestedBlockTemperature, Translate(" °C and lid temperature : "), i_fltRequestedLidTemperature, Translate(" °C."), Translate("Actual block temperature : "), l_fltActualMountTemperature, Translate(" °C and actual lid temperature : "), l_fltActualLidTemperature, Translate(" °C. Performing ODTC script : "), t_strODTCMethodName, Translate("."));
        VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
        if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
        {
          if (l_intCounterToEvaluateLidAndBlockTemperatures == 3)
          {
            break;
          }
        }
        else
        {
          if (l_intCounterToEvaluateLidAndBlockTemperatures == 50)
          {
            dialogHandle_5.SetOutput(Translate("Could not reach temperatures."), "\n", Translate("Requested block temperature : "), i_fltRequestedBlockTemperature, "\n", Translate("Reached block temperature : "), l_fltActualMountTemperature, "\n", Translate("Requested lid temperature : "), i_fltRequestedLidTemperature, "\n", Translate("Reached block temperature : "), l_fltActualLidTemperature);
            dialogHandle_5.ShowOutput(Translate("Check ODTC BLOCK and LID temperatures"), hslOKOnly | hslQuestion | hslDefButton1, 5);
            break;
          }
        }
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_WaitForLidAndBlockCorrectTemperature:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  function ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish( variable i_intDeviceNumber, variable i_intTimeForProtocoll, variable i_intRequestIDToWaitFor ) void {
    private variable l_strDeviceID;
    private variable l_strPmsID;
    private variable l_strState;
    private variable l_strMessage;
    private variable l_strTime;
    private variable l_fltElapsedTime;
    private variable l_intReturnValue;
    private variable l_strCurrentTime;
    private variable l_blnLocked;
    private variable l_strTrace;
    private variable l_blnReturn;
    private timer l_hdlTimerDelay;
    private timer l_hdlTimerWaitForFinish;
    private variable l_strArrTemperatureNames[];
    private variable l_fltArrTemperature[];
    private variable l_intTimeToWait;
    MECC::TraceComment(Translate("\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>---------------------------------------------------------------------------------------------->\n>>>>>>>>>> ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish:  Start Submethod <<<<<<<<<<"));
    if (i_intTimeForProtocoll < 0)
    {
      i_intTimeForProtocoll = 0;
    }
    if( 0 == l_hdlTimerWaitForFinish.SetTimer(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    {
      while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
      {
        l_fltElapsedTime = l_hdlTimerWaitForFinish.GetElapsedTime();
        l_fltElapsedTime = l_fltElapsedTime + 11;
        if (l_fltElapsedTime >= i_intTimeForProtocoll)
        {
          break;
        }
        l_blnReturn = Inheco_ODTC::Standard::ReadActualTemperature(i_intDeviceNumber, Translate(""), l_strTime, l_fltArrTemperature, l_strArrTemperatureNames, l_intReturnValue, l_strMessage);
        TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, "l_fltArrTemperature", "l_strArrTemperatureNames", l_fltArrTemperature, l_strArrTemperatureNames);
        l_strTrace = StrConcat8("l_strTime = ", l_strTime, ", l_intReturnValue = ", l_intReturnValue, ", l_strMessage = ", l_strMessage, "", "");
        if (l_intReturnValue == 12)
        {
          Trace ("***** ReadActualTemperature failed But Error 2005 or error 2006 warning will be ignored Device will continue operation, intReturnValue = ", l_intReturnValue);
          Trace ("***** Message = ", l_strMessage);
          l_blnReturn = ASWGLOBAL::BOOL::TRUE;
        }
        if( 0 == l_hdlTimerDelay.SetTimer(5) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == l_hdlTimerDelay.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      l_blnReturn = Inheco_ODTC::Standard::GetStatus(i_intDeviceNumber, l_strDeviceID, l_strState, l_blnLocked, l_strPmsID, l_strCurrentTime, l_intReturnValue, l_strMessage);
      l_strTrace = StrConcat12("l_strDeviceID = ", l_strDeviceID, ", l_strState = ", l_strState, ", l_blnLocked = ", l_blnLocked, ", l_strPMSID = ", l_strPmsID, ", l_strCurrentDeviceTime = ", l_strCurrentTime, ", l_intReturnValue = ", l_intReturnValue);
      l_strTrace = StrConcat4(l_strTrace, ", l_strMessage = ", l_strMessage, "");
      _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::GetStatus", l_intReturnValue, l_strTrace);
    }
    l_intTimeToWait = i_intTimeForProtocoll + 20;
    l_strTrace = StrConcat2("Effective time to wait before an error is triggered = ", l_intTimeToWait);
    Trace ("***** Message = ", l_strTrace);
    l_blnReturn = Inheco_ODTC::Standard::WaitForEndOfExecuteMethod(i_intDeviceNumber, l_intTimeToWait, i_intRequestIDToWaitFor, l_intReturnValue, l_strMessage);
    _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::WaitForStartedProtocolToFinish", l_intReturnValue, l_strMessage);
    MECC::TraceComment(Translate(">>>>>>>>>> ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish:  Submethod Complete <<<<<<<<<<\n<-----------------------------------------------------------------------------------------------------<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<<"));
  }

  private function _DATA_HHSTranslateErrorCode( variable i_intErrorCode, variable & o_strErrorDescription ) void {
    private variable l_strErrorCode;
    private variable l_strErrorMessage;
    o_strErrorDescription = 0;
    if (i_intErrorCode == 0)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("No error"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
    if (i_intErrorCode == 1)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("Fatal error"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
    if (i_intErrorCode == 2)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("Node not initialized"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
    if (i_intErrorCode == 3)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("Device not connected"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
    if (i_intErrorCode == 4)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("CAN error"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
    if (i_intErrorCode == 5)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("EEProm error"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
    if (i_intErrorCode == 6)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("Unknown command"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
    if (i_intErrorCode == 7)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("Unknown parameter"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
    if (i_intErrorCode == 8)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("Parameter out of range"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
    if (i_intErrorCode == 9)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("Voltage error"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
    if (i_intErrorCode == 10)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("Stop"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
    if (i_intErrorCode == 11)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("Wrong adress"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
    if (i_intErrorCode == 13)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("Shaker init failed"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
    if (i_intErrorCode == 14)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("Shaker not initialized"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
    if (i_intErrorCode == 15)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("Shaker step loss"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
    if (i_intErrorCode == 17)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("Plate lock init failure"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
    if (i_intErrorCode == 18)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("Plate lock step loss"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
    if (i_intErrorCode == 20)
    {
      l_strErrorCode = StrIStr(i_intErrorCode);
      l_strErrorCode = StrConcat4(Translate("HHS error description "), Translate(" - code : "), l_strErrorCode, Translate(" - "));
      l_strErrorMessage = StrConcat4(Translate("represents : "), Translate("Unknown firmware error"), Translate(""), Translate(""));
      o_strErrorDescription = StrConcat2(l_strErrorCode, l_strErrorMessage);
    }
  }

  function ODTC_GetDataFromLastRun( variable i_intDeviceNumber, variable i_strNameOfODTCProtocol ) void {
    private variable l_strFullPathFileODTCReport;
    private variable l_strResultXML_DataOfLastRun;
    private variable l_strMessage;
    private variable l_intReturnValue;
    private variable l_blnReturnValue;
    private variable l_strFullPathResultXML;
    private variable l_strFunctionName;
    private variable l_strDisplayTextToStatusWindow;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), l_strFunctionName, Translate(": START"), Translate("*****************************************"));
    l_blnReturnValue = Inheco_ODTC::Advanced::GetLastData(i_intDeviceNumber, Translate(""), l_strResultXML_DataOfLastRun, l_intReturnValue, l_strMessage);
    _ODTC_HandleReturnValue(l_blnReturnValue, "INHECOODTCCONTROLLER::GetLastData", l_intReturnValue, l_strMessage);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
    {
      l_strResultXML_DataOfLastRun = Translate("<?xml version=\"1.0\" encoding=\"utf-8\"?><ResponseData xmlns:xsi=\"http://www.w3.org/2001/XMLSchema-instance\" xsi:noNamespaceSchemaLocation=\"ResponseType_1.2.xsd\"><AnyData>&lt;?xml version=\"1.0\" encoding=\"utf-8\"?&gt;&lt;containerData xmlns:xsi=\"http://www.w3.org/2001/XMLSchema-instance\" xsi:noNamespaceSchemaLocation=\"DataCapture_1.0.xsd\" version=\"1.0\"&gt;&lt;experimentStep name=\"Temperature Trace\" sequence=\"0\" type=\"Measurement\"&gt;&lt;dataSeries nameId=\"2021-12-07T14-42-20Z\" description=\"\" unit=\"CSV\" repeat=\"0\"&gt;&lt;seriesValueSet&gt;&lt;stringValue mapId=\"\"&gt;Elapsed time [ms];Target temperature [1/100°C];Current temperature [1/100°C];Lid temperature [1/100°C] 170;2407;2402;2354 1180;2437;2430;2362 2172;2467;2463;2388 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5592 &lt;/stringValue&gt;&lt;/seriesValueSet&gt;&lt;/dataSeries&gt;&lt;/experimentStep&gt;&lt;labwareInfo&gt;&lt;standardPlate name=\"\" identification=\"\" labwareTypeId=\"\" labwareTypeName=\"\" labwareDefinitionSource=\"Other\" /&gt;&lt;/labwareInfo&gt;&lt;deviceMetadata&gt;&lt;software name=\"\" manufacturer=\"\" version=\"\" /&gt;&lt;identification productName=\"\" productNumber=\"\" manufacturer=\"\" firmwareVersion=\"\" serialNumber=\"\" /&gt;&lt;/deviceMetadata&gt;&lt;/containerData&gt;</AnyData></ResponseData>");
      l_strFullPathResultXML = Translate("**** xml traced in simulation mode only****");
      l_strResultXML_DataOfLastRun = Translate("<?xml version=\"1.0\" encoding=\"utf-8\"?><ResponseData xmlns:xsi=\"http://www.w3.org/2001/XMLSchema-instance\" xsi:noNamespaceSchemaLocation=\"ResponseType_1.2.xsd\"><AnyData>&lt;?xml version=\"1.0\" encoding=\"utf-8\"?&gt;&lt;containerData xmlns:xsi=\"http://www.w3.org/2001/XMLSchema-instance\" xsi:noNamespaceSchemaLocation=\"DataCapture_1.0.xsd\" version=\"1.0\"&gt;&lt;experimentStep name=\"Temperature Trace\" sequence=\"0\" type=\"Measurement\"&gt;&lt;dataSeries nameId=\"2021-12-07T14-42-20Z\" description=\"\" unit=\"CSV\" repeat=\"0\"&gt;&lt;seriesValueSet&gt;&lt;stringValue mapId=\"\"&gt;Elapsed time [ms];Target temperature [1/100°C];Current temperature [1/100°C];Lid temperature [1/100°C] 170;2407;2402;2354 1180;2437;2430;2362 2172;2467;2463;2388 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5592 &lt;/stringValue&gt;&lt;/seriesValueSet&gt;&lt;/dataSeries&gt;&lt;/experimentStep&gt;&lt;labwareInfo&gt;&lt;standardPlate name=\"\" identification=\"\" labwareTypeId=\"\" labwareTypeName=\"\" labwareDefinitionSource=\"Other\" /&gt;&lt;/labwareInfo&gt;&lt;deviceMetadata&gt;&lt;software name=\"\" manufacturer=\"\" version=\"\" /&gt;&lt;identification productName=\"\" productNumber=\"\" manufacturer=\"\" firmwareVersion=\"\" serialNumber=\"\" /&gt;&lt;/deviceMetadata&gt;&lt;/containerData&gt;</AnyData></ResponseData>");
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strResultXML_DataOfLastRun : "), l_strResultXML_DataOfLastRun);
    l_blnReturnValue = _GetDataFromLastRun_ExportData(l_strResultXML_DataOfLastRun, i_strNameOfODTCProtocol, l_strFullPathFileODTCReport);
    if (l_blnReturnValue == ASWGLOBAL::BOOL::TRUE)
    {
      l_strDisplayTextToStatusWindow = StrConcat12(Translate("Data of running protocol was exported and will be converted into following excel file : "), Translate(""), Translate(" A xls file will be generated at Logfiles folder : "), l_strFullPathFileODTCReport, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    else
    {
      l_strDisplayTextToStatusWindow = StrConcat12(Translate("An error accurred during extract data from last run."), Translate(""), Translate("Data of running protocol was not exported. "), Translate(""), Translate("Workflow will continue without interruption."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_strResultXML_DataOfLastRun : "), l_strResultXML_DataOfLastRun);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("*****************************************"), l_strFunctionName, Translate(": COMPLETE"), Translate("*****************************************"));
  }

  private function _GetDataFromLastRun_ExportData( variable i_strResultOfLastRunODTC, variable i_strNameOfProtocolPerfromedODTC, variable & o_strFullPathExportedDataODTC ) variable {
    private variable l_fltCurrentReachedLidTemerpature;
    private variable l_strFullPathFileODTCReport;
    private variable l_intStartIndex;
    private variable l_strModyfiedFileName;
    private variable l_strCurrentDataSet;
    private variable l_intStartKeyLength;
    private variable l_intLoopCounterDataSets;
    private variable l_fltCurrentElapsedTime;
    private variable l_intCount;
    private variable l_intNumberOfDataSets;
    private variable l_str_FunctionName;
    private variable l_fltCurrentTargetBlockTemperature;
    private variable l_strCurrentTime;
    private variable l_strCurrentDate;
    private variable l_strEndKey;
    private variable l_fltCurrentReachedBlockTemperature;
    private variable l_intIndexOfDataSets;
    private variable l_strMessageODTCGetLastData;
    private variable l_strStartKey;
    private variable l_intEndIndex;
    private variable l_strAllValues;
    private variable l_intNumberOfData;
    private file hdl_ODTCReportFile;
    private variable l_arrStrTargetTemps[];
    private variable l_arrStrCurrentData[];
    private variable l_arrStrElapsedTimes[];
    private variable l_arrStrLidTemps[];
    private variable l_arrStrAllValues[];
    private variable l_arrStrCurrentTemps[];
    o_strFullPathExportedDataODTC = 0;
    l_str_FunctionName = Translate("");
    l_str_FunctionName = GetFunctionName();
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
    Trace("==================================================");
    Trace("");
    l_strMessageODTCGetLastData = i_strResultOfLastRunODTC;
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate("Last Protocol performed on ODTC : "), i_strNameOfProtocolPerfromedODTC, Translate(". Last xml file response od ODTC : "), i_strResultOfLastRunODTC, Translate("."), Translate(""));
    onerror goto errLabel_6 ;
    err.Clear();
    l_arrStrElapsedTimes.SetSize(0);
    l_arrStrTargetTemps.SetSize(0);
    l_arrStrCurrentTemps.SetSize(0);
    l_arrStrLidTemps.SetSize(0);
    l_strStartKey = Translate("Lid temperature [1/100");
    l_intStartIndex = StrFind(i_strResultOfLastRunODTC, l_strStartKey);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intStartIndex (-1 = value not found within string) : "), l_intStartIndex);
    if (l_intStartIndex == -1)
    {
      l_strMessageODTCGetLastData = StrConcat2(Translate("An error occurred during get last data command - no xls export file will be generated."), Translate(" START INDEX NOT FOUND WITHIN STRING OF ODTC RESPONSE."));
      VectorCustomDialogs::MessageDialog(Translate("Get last data from xml file of ODTC"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 5, l_strMessageODTCGetLastData);
    }
    l_intStartKeyLength = StrGetLength(l_strStartKey);
    l_intStartKeyLength = l_intStartKeyLength + 4;
    l_intStartIndex = l_intStartIndex + l_intStartKeyLength;
    l_strEndKey = Translate("lt;/stringValue");
    l_intEndIndex = StrFind(i_strResultOfLastRunODTC, l_strEndKey);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intEndIndex (-1 = value not found within string) : "), l_intEndIndex);
    if (l_intEndIndex == -1)
    {
      l_strMessageODTCGetLastData = StrConcat2(Translate("An error occurred during get last data command - no xls export file will be generated."), Translate(" END INDEX NOT FOUND WITHIN STRING OF ODTC RESPONSE."));
      VectorCustomDialogs::MessageDialog(Translate("Get last data from xml file of ODTC"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 5, l_strMessageODTCGetLastData);
    }
    l_intEndIndex = l_intEndIndex - 2;
    l_intCount = l_intEndIndex - l_intStartIndex;
    l_intCount = l_intCount + 1;
    l_strAllValues = StrMid(i_strResultOfLastRunODTC, l_intStartIndex, l_intCount);
    StrTrimLeft(l_strAllValues, Translate(""));
    StrTrimRight(l_strAllValues, Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_strAllValues: "), l_strAllValues);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
    {
      l_arrStrAllValues = HSLExtensions::String::Split(l_strAllValues, Translate(" "), ASWGLOBAL::BOOL::FALSE);
    }
    else
    {
      l_arrStrAllValues = HSLExtensions::String::Split(l_strAllValues, Translate("\n"), ASWGLOBAL::BOOL::FALSE);
    }
    l_intNumberOfDataSets=l_arrStrAllValues.GetSize();
    {
      for(l_intLoopCounterDataSets = 0; l_intLoopCounterDataSets < l_intNumberOfDataSets;)
      {
        l_intLoopCounterDataSets = l_intLoopCounterDataSets + 1;
        l_strCurrentDataSet=l_arrStrAllValues.GetAt(l_intLoopCounterDataSets-1);
        l_arrStrCurrentData = HSLExtensions::String::Split(l_strCurrentDataSet, Translate(";"), ASWGLOBAL::BOOL::TRUE);
        l_intNumberOfData=l_arrStrCurrentData.GetSize();
        if (l_intNumberOfData != 4)
        {
          l_strMessageODTCGetLastData = StrConcat2(Translate("An error occurred during get last data command - no xls export file will be generated."), Translate(" ARRAY SIZE OF DATA SET IS NOT EQUAL TO 4."));
          VectorCustomDialogs::MessageDialog(Translate("Get last data from xml file of ODTC"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 5, l_strMessageODTCGetLastData);
        }
        l_fltCurrentElapsedTime = StrFVal(l_arrStrCurrentData.ElementAt( 1 -1));
        l_fltCurrentElapsedTime = l_fltCurrentElapsedTime / (100 * 1.0);
        l_fltCurrentElapsedTime = MthFFloor(l_fltCurrentElapsedTime);
        l_arrStrElapsedTimes.AddAsLast(l_fltCurrentElapsedTime);
        l_fltCurrentTargetBlockTemperature = StrFVal(l_arrStrCurrentData.ElementAt( 2 -1));
        l_fltCurrentTargetBlockTemperature = l_fltCurrentTargetBlockTemperature / (100 * 1.0);
        l_arrStrTargetTemps.AddAsLast(l_fltCurrentTargetBlockTemperature);
        l_fltCurrentReachedBlockTemperature = StrFVal(l_arrStrCurrentData.ElementAt( 3 -1));
        l_fltCurrentReachedBlockTemperature = l_fltCurrentReachedBlockTemperature / (100 * 1.0);
        l_arrStrCurrentTemps.AddAsLast(l_fltCurrentReachedBlockTemperature);
        l_fltCurrentReachedLidTemerpature = StrFVal(l_arrStrCurrentData.ElementAt( 4 -1));
        l_fltCurrentReachedLidTemerpature = l_fltCurrentReachedLidTemerpature / (100 * 1.0);
        l_arrStrLidTemps.AddAsLast(l_fltCurrentReachedLidTemerpature);
      }
    }
    TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("l_arrStrElapsedTimes: "), l_arrStrElapsedTimes);
    TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("l_arrStrTargetTemps: "), l_arrStrTargetTemps);
    TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("l_arrStrCurrentTemps: "), l_arrStrCurrentTemps);
    TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("l_arrStrLidTemps: "), l_arrStrLidTemps);
    MECC::TraceComment(Translate("\nCHECKCHECK\n"));
    l_strModyfiedFileName = StrConcat2(i_strNameOfProtocolPerfromedODTC, Translate(""));
    l_strCurrentDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    l_strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    l_strFullPathFileODTCReport = StrConcat8(Translate("C:\\Program Files (x86)\\HAMILTON\\LogFiles\\"), l_strCurrentDate, Translate("_"), l_strCurrentTime, Translate("_"), i_strNameOfProtocolPerfromedODTC, Translate(".xls"), Translate(""));
    hdl_ODTCReportFile.AddField("Time in seconds", l_fltCurrentElapsedTime, hslInteger);
    hdl_ODTCReportFile.AddField("Target block temperature in °C", l_fltCurrentTargetBlockTemperature, hslFloat);
    hdl_ODTCReportFile.AddField("Reached block temperature in °C", l_fltCurrentReachedBlockTemperature, hslFloat);
    hdl_ODTCReportFile.AddField("Reached lid temperature in °C", l_fltCurrentReachedLidTemerpature, hslFloat);
    if( 0 == hdl_ODTCReportFile.Open(l_strFullPathFileODTCReport + " " + i_strNameOfProtocolPerfromedODTC, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, l_strFullPathFileODTCReport, "HxMetEdCompCmd");
    }
    l_intNumberOfDataSets=l_arrStrElapsedTimes.GetSize();
    {
      for(l_intIndexOfDataSets = 0; l_intIndexOfDataSets < l_intNumberOfDataSets;)
      {
        l_intIndexOfDataSets = l_intIndexOfDataSets + 1;
        l_fltCurrentElapsedTime=l_arrStrElapsedTimes.GetAt(l_intIndexOfDataSets-1);
        l_fltCurrentTargetBlockTemperature=l_arrStrTargetTemps.GetAt(l_intIndexOfDataSets-1);
        l_fltCurrentReachedBlockTemperature=l_arrStrCurrentTemps.GetAt(l_intIndexOfDataSets-1);
        l_fltCurrentReachedLidTemerpature=l_arrStrLidTemps.GetAt(l_intIndexOfDataSets-1);
        if( 0 == hdl_ODTCReportFile.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != hdl_ODTCReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hdl_ODTCReportFile.RemoveFields();
    o_strFullPathExportedDataODTC = l_strFullPathFileODTCReport;
    return (ASWGLOBAL::BOOL::TRUE);
    errLabel_6 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }   /* end if from skip handler if no error */
    Trace("");
    Trace("==================================================");
    Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
    Trace("==================================================");
    Trace("");
  }
} // library namespace
