private function BackUpDeck(  ) void ;
private function InitHHS(  ) void ;
private function RestoreDeck(  ) void ;
private function SetDeepWellPlatesToTeach( sequence & o_arr_DWPlates[], sequence & o_arr_DWHHS[] ) void ;
private function SetPCRPlatesToTeach( sequence & o_arr_PCRPlates[], sequence & o_arr_PCRHHS[] ) void ;
private function Set_Global_Variables(  ) void ;
private function TeachHHSPositions( sequence & i_arr_PositionsToBeTaught[], variable & io_str_TeachLog ) void ;
private function TeachPositions( sequence & i_arr_PositionsToBeTaught[], variable & io_str_TeachLog ) void ;
private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void ;
private function _DetermineIfStack( variable i_str_LabID, variable & o_int_StackCount, variable & o_str_BottomLabware ) void ;
private function _HHS_HandleReturnValue( variable i_intErrorCode ) void ;
private function _SetHHSPosition( variable i_str_CurrentLabwareID, variable & o_int_HHSID ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  MOVEMENT_CONTROLLER::Terminate_Deck(ML_STAR);
  STATUS_UPDATE_CONTROLLER::TerminateStatusDialog();
  HSLHamHeaterShaker::Terminate();
}

private function Set_Global_Variables(  ) void {
  private variable l_str_MethodsFolderPath;
  private variable l_str_LogFolderPath;
  private variable l_str_HamiltonFolderPath;
  private variable l_str_Year;
  private variable l_str_Month;
  private variable l_strFunctionName;
  l_strFunctionName = Translate("");
  l_strFunctionName = GetFunctionName();
  TRACE::SUBMETHOD_BLOCK(l_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
  t_arr_HHSIDs.SetSize(0);
  STAR_TEACHING::INIT::InitializeVariables();
  l_str_MethodsFolderPath = FilGetMethodsPath();
  l_str_LogFolderPath = FilGetLogFilesPath();
  l_str_HamiltonFolderPath = l_str_MethodsFolderPath;
  StrReplace(l_str_HamiltonFolderPath, Translate("Methods"), Translate(""));
  l_str_Year = TimGetFormattedDate(Translate("%Y"));
  l_str_Month = TimGetFormattedDate(Translate("%m. %B"));
  STAR_TEACHING::BACKUP_LOG::PATH = StrConcat4(l_str_HamiltonFolderPath, Translate(""), Translate("Teach Method\\Back Up\\"), Translate(""));
  HSLExtensions::Directory::Create(STAR_TEACHING::BACKUP_LOG::PATH);
  STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH = StrConcat4(l_str_LogFolderPath, Translate("\\"), Translate("POSITION_TEACHING_LOGFILE"), Translate(".xls"));
  t_arr_DWPlatesToTeach.SetSize(0);
  t_arr_PCRPlatesToTeach.SetSize(0);
  STAR_TEACHING::TEACH_POSITION::OFFSET_Z = 0.0;
  t_str_TeachLogFile = Translate("");
  STAR_TEACHING::STR::DECK_LAYOUT_PATH = DevGetDeckLayoutFileName(ML_STAR);
  STAR_TEACHING::BOOL::USE_STATUS_UPDATE = 1;
  t_str_LabwareHHSProperty = Translate("HHS_DEVICE_ID");
  TRACE::SUBMETHOD_BLOCK(l_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
}

private function SetDeepWellPlatesToTeach( sequence & o_arr_DWPlates[], sequence & o_arr_DWHHS[] ) void {
  private variable l_int_TotalDWPlates;
  private variable l_strFunctionName;
  private variable l_int_TotalDWPlatesHHS;
  o_arr_DWPlates.SetSize( 0);
  o_arr_DWHHS.SetSize( 0);
  l_strFunctionName = Translate("");
  l_strFunctionName = GetFunctionName();
  TRACE::SUBMETHOD_BLOCK(l_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
  o_arr_DWPlates.SetSize(0);
  o_arr_DWPlates.AddAsLast(ML_STAR.Stack1);
  o_arr_DWPlates.AddAsLast(ML_STAR.Stack2);
  o_arr_DWPlates.AddAsLast(ML_STAR.MIDI_CPAC);
  o_arr_DWPlates.AddAsLast(ML_STAR.MIDI_OnMagnet);
  o_arr_DWPlates.AddAsLast(ML_STAR.MIDI_Pipette);
  o_arr_DWHHS.SetSize(0);
  o_arr_DWHHS.AddAsLast(ML_STAR.HHS3_MIDI);
  o_arr_DWHHS.AddAsLast(ML_STAR.HHS4_MIDI);
  o_arr_DWHHS.AddAsLast(ML_STAR.HHS5_MIDI);
  l_int_TotalDWPlates=o_arr_DWPlates.GetSize();
  l_int_TotalDWPlatesHHS=o_arr_DWHHS.GetSize();
  l_int_TotalDWPlates = l_int_TotalDWPlates + l_int_TotalDWPlatesHHS;
  TRACE::TRACE02(Translate("Total DW plates to teach:  "), l_int_TotalDWPlates);
  TRACE::SUBMETHOD_BLOCK(l_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
}

private function SetPCRPlatesToTeach( sequence & o_arr_PCRPlates[], sequence & o_arr_PCRHHS[] ) void {
  private variable l_strFunctionName;
  private variable l_int_TotalPCRPlates;
  private variable l_int_TotalPCRPlatesHHS;
  o_arr_PCRPlates.SetSize( 0);
  o_arr_PCRHHS.SetSize( 0);
  l_strFunctionName = Translate("");
  l_strFunctionName = GetFunctionName();
  TRACE::SUBMETHOD_BLOCK(l_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
  o_arr_PCRPlates.SetSize(0);
  o_arr_PCRPlates.AddAsLast(ML_STAR.Stack4);
  o_arr_PCRPlates.AddAsLast(ML_STAR.HSP_StackOut);
  o_arr_PCRPlates.AddAsLast(ML_STAR.HSP_CPAC);
  o_arr_PCRPlates.AddAsLast(ML_STAR.HSP_Pipette);
  o_arr_PCRPlates.AddAsLast(ML_STAR.HSP_Pipette2);
  o_arr_PCRPlates.AddAsLast(ML_STAR.HSP_OnMagnet);
  o_arr_PCRHHS.SetSize(0);
  o_arr_PCRHHS.AddAsLast(ML_STAR.HHS1_HSP);
  o_arr_PCRHHS.AddAsLast(ML_STAR.HHS2_HSP);
  o_arr_PCRHHS.AddAsLast(ML_STAR.HHS3_HSP);
  o_arr_PCRHHS.AddAsLast(ML_STAR.HHS1_QIAseqIndexAdapterPlate1);
  o_arr_PCRHHS.AddAsLast(ML_STAR.HHS2_QIAseqIndexAdapterPlate2);
  o_arr_PCRHHS.AddAsLast(ML_STAR.HHS1_QIAseqIndexPrimerPlate1);
  o_arr_PCRHHS.AddAsLast(ML_STAR.HHS2_QIAseqIndexPrimerPlate2);
  l_int_TotalPCRPlates=o_arr_PCRPlates.GetSize();
  l_int_TotalPCRPlatesHHS=o_arr_PCRHHS.GetSize();
  l_int_TotalPCRPlates = l_int_TotalPCRPlates + l_int_TotalPCRPlatesHHS;
  TRACE::TRACE02(Translate("Total PCR plates to teach:  "), l_int_TotalPCRPlates);
  TRACE::SUBMETHOD_BLOCK(l_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
}

private function TeachPositions( sequence & i_arr_PositionsToBeTaught[], variable & io_str_TeachLog ) void {
  private variable l_strFunctionName;
  private variable l_int_TotalPositions;
  private variable l_arr_LabwareIDs[];
  private variable l_int_Index;
  private variable l_str_LabID;
  private variable l_int_NullCheck;
  private variable l_arr_LabwareIDsTeachOrder[];
  private variable l_str_PlateLabID;
  private variable l_flt_PlateYCoord;
  private variable l_flt_PlateXCoord;
  private file QueryFiles;
  private variable l_bln_LabwareFound;
  private variable l_int_TeachIndex;
  private variable l_str_CurrentPlate;
  private variable l_retValueDialog;
  private variable l_bool_MeasurementDone;
  private variable l_flt_DeltaZ;
  private variable l_flt_DeltaX;
  private variable l_flt_DeltaY;
  private variable l_str_ErrorDescription;
  private dialog dialogHandle_1;
  private variable l_int_StackCount;
  private variable l_str_BottomLabware;
  l_int_TotalPositions=i_arr_PositionsToBeTaught.GetSize();
  if (l_int_TotalPositions == 0)
  {
    return;
  }
  l_strFunctionName = Translate("");
  l_strFunctionName = GetFunctionName();
  TRACE::SUBMETHOD_BLOCK(l_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
  l_bool_MeasurementDone = BOOLEON::FALSE;
  l_arr_LabwareIDs.SetSize(0);
  l_arr_LabwareIDsTeachOrder.SetSize(0);
  l_int_TotalPositions=i_arr_PositionsToBeTaught.GetSize();
  {
    for(l_int_Index = 0; l_int_Index < l_int_TotalPositions;)
    {
      l_int_Index = l_int_Index + 1;
      l_str_LabID = SeqGetLabwareId(i_arr_PositionsToBeTaught.ElementAt( l_int_Index -1));
      l_int_NullCheck = StrGetLength(l_str_LabID);
      if (l_int_NullCheck > 0)
      {
        _DetermineIfStack(l_str_LabID, l_int_StackCount, l_str_BottomLabware);
        if (l_int_StackCount > 0)
        {
          l_str_LabID = l_str_BottomLabware;
        }
        l_bln_LabwareFound = HSLExtensions::Array::ContainsValue(l_arr_LabwareIDs, l_str_LabID);
        if (l_bln_LabwareFound == BOOLEON::FALSE)
        {
          l_arr_LabwareIDs.AddAsLast(l_str_LabID);
        }
      }
    }
  }
  QueryFiles.AddField("LAB_ID", l_str_PlateLabID, hslString, 255);
  QueryFiles.AddField("X_COORD", l_flt_PlateXCoord, hslFloat);
  QueryFiles.AddField("Y_COORD", l_flt_PlateYCoord, hslFloat);
  if( 0 == QueryFiles.Open(STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH + " " + "PLATES", hslRead, "SELECT [LAB_ID], [X_COORD], [Y_COORD] FROM [PLATES] ORDER BY X_COORD ASC, Y_COORD DESC") )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH, "HxMetEdCompCmd");
  }
  {
    while (
       (QueryFiles.Eof() == 0)
    )
    {
      if( 0 == QueryFiles.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      l_bln_LabwareFound = HSLExtensions::Array::ContainsValue(l_arr_LabwareIDs, l_str_PlateLabID);
      if (l_bln_LabwareFound == BOOLEON::TRUE)
      {
        l_arr_LabwareIDsTeachOrder.AddAsLast(l_str_PlateLabID);
      }
    }
  }
  if( 0 != QueryFiles.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  QueryFiles.RemoveFields();
  Util2::Debug::TraceArray(Translate("Labware Position Teach Order"), l_arr_LabwareIDsTeachOrder);
  l_int_TotalPositions=l_arr_LabwareIDsTeachOrder.GetSize();
  {
    for(l_int_TeachIndex = 0; l_int_TeachIndex < l_int_TotalPositions;)
    {
      l_int_TeachIndex = l_int_TeachIndex + 1;
      l_str_CurrentPlate=l_arr_LabwareIDsTeachOrder.GetAt(l_int_TeachIndex-1);
      STAR_TEACHING::TEACH_POSITION::CARRIER = Translate("");
      STAR_TEACHING::TEACH_POSITION::CONFIG_FILE = Translate("");
      STAR_TEACHING::TEACH_POSITION::CURRENT_X = 0.0;
      STAR_TEACHING::TEACH_POSITION::CURRENT_Y = 0.0;
      STAR_TEACHING::TEACH_POSITION::CURRENT_Z = 0.0;
      STAR_TEACHING::TEACH_POSITION::LAB_ID = Translate("");
      STAR_TEACHING::TEACH_POSITION::LAB_NAME = Translate("");
      STAR_TEACHING::TEACH_POSITION::SITE = Translate("");
      STAR_TEACHING::TEACH_POSITION::TEACH_INDEX = Translate("");
      onerror goto errLabel_2 ;
      err.Clear();
      POSITION_TEACHING_CONTROLLER::GetLabwareInformation(l_str_CurrentPlate);
      l_retValueDialog = POSITION_TEACHING_CONTROLLER::ConfirmCurrentLabware(ML_STAR);
      if (l_retValueDialog == 1)
      {
        STATUS_UPDATE_CONTROLLER::SetStatusText(l_str_CurrentPlate, BOOLEON::FALSE, BOOLEON::FALSE, BOOLEON::TRUE);
        STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("Measure X/Y/Z location"), BOOLEON::FALSE, BOOLEON::TRUE, BOOLEON::TRUE);
        POSITION_TEACHING_CONTROLLER::MeasureLabwarePosition(ML_STAR, l_flt_DeltaX, l_flt_DeltaY, l_flt_DeltaZ);
        STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("Update log file and save deck"), BOOLEON::FALSE, BOOLEON::TRUE, BOOLEON::TRUE);
        POSITION_TEACHING_CONTROLLER::UpdateLogFile(ML_STAR, l_flt_DeltaX, l_flt_DeltaY, l_flt_DeltaZ, io_str_TeachLog);
        POSITION_TEACHING_CONTROLLER::SaveTheDeck(ML_STAR);
        l_bool_MeasurementDone = BOOLEON::TRUE;
        STATUS_UPDATE_CONTROLLER::SetStatusText(Translate(""), BOOLEON::FALSE, BOOLEON::FALSE, BOOLEON::FALSE);
      }
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        MECC::TraceComment(Translate("################################################################\nISSUE TEACHING POSITION\n################################################################"));
        STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("There was an issue teaching position!"), BOOLEON::FALSE, BOOLEON::TRUE, BOOLEON::TRUE);
        STATUS_UPDATE_CONTROLLER::SetStatusText(Translate(""), BOOLEON::FALSE, BOOLEON::FALSE, BOOLEON::FALSE);
        MOVEMENT_CONTROLLER::MoveChannelToZCoord(ML_STAR, 245.0);
        TEACHING_SUPPORT::Deck_Visualize_Position(ML_STAR, STAR_TEACHING::TEACH_POSITION::LAB_ID, STAR_TEACHING::TEACH_POSITION::TEACH_INDEX, 3);
        TEACHING_SUPPORT::Deck_Visualize(ML_STAR, STAR_TEACHING::TEACH_POSITION::LAB_ID, 4);
        l_str_ErrorDescription = ErrGetDescription();
        dialogHandle_1.SetOutput(Translate("There was an issue measuring the labware's position.  Find a description below:"), Translate("\n\n"), l_str_ErrorDescription);
        dialogHandle_1.ShowOutput(Translate("Issue teaching well"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }   /* end if from skip handler if no error */
    }
  }
  POSITION_TEACHING_CONTROLLER::ResetLabwareVisState(ML_STAR);
  TRACE::SUBMETHOD_BLOCK(l_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
}

private function _DetermineIfStack( variable i_str_LabID, variable & o_int_StackCount, variable & o_str_BottomLabware ) void {
  private variable l_flt_NotUsed;
  private variable l_str_LabID;
  private variable l_int_Index;
  private variable l_flt_BottomHeight;
  private variable l_flt_CurrentZ;
  private variable l_arr_StackedLabware[];
  o_int_StackCount = 0;
  o_str_BottomLabware = 0;
  o_int_StackCount = 0;
  o_str_BottomLabware = Translate("");
  l_str_LabID = i_str_LabID;
  l_arr_StackedLabware.SetSize(0);
  onerror goto errLabel_3 ;
  err.Clear();
  LPQ::ADJUST_GetCurrentStack(ML_STAR, l_str_LabID, l_arr_StackedLabware);
  errLabel_3 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
  }   /* end if from skip handler if no error */
  o_int_StackCount=l_arr_StackedLabware.GetSize();
  if (o_int_StackCount == 0)
  {
    return;
  }
  l_flt_BottomHeight = 10000.0;
  {
    for(l_int_Index = 0; l_int_Index < o_int_StackCount;)
    {
      l_int_Index = l_int_Index + 1;
      DevGetLabwarePosition(ML_STAR, l_arr_StackedLabware.ElementAt( l_int_Index -1), l_flt_NotUsed, l_flt_NotUsed, l_flt_CurrentZ, l_flt_NotUsed);
      if (l_flt_CurrentZ < l_flt_BottomHeight)
      {
        l_flt_BottomHeight = l_flt_CurrentZ;
        o_str_BottomLabware = l_arr_StackedLabware.ElementAt( l_int_Index -1);
      }
    }
  }
}

private function BackUpDeck(  ) void {
  private dialog customDialog_4;
  private variable l_ret_BackUpUtility;
  private variable l_strFunctionName;
  l_strFunctionName = Translate("");
  l_strFunctionName = GetFunctionName();
  TRACE::SUBMETHOD_BLOCK(l_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
  customDialog_4.InitCustomDialog("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");
  customDialog_4.ShowCustomDialog();
  l_ret_BackUpUtility = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
  if (l_ret_BackUpUtility == DIALOGS::YES)
  {
    STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("Back up deck layout positions"), BOOLEON::FALSE, BOOLEON::FALSE, BOOLEON::TRUE);
    MECC::TraceComment(Translate("======================= BACK UP CURRENT DECK"));
    DECKBACKUPUTILITY::BackUpDeck(ML_STAR, STAR_TEACHING::BACKUP_LOG::PATH);
  }
  TRACE::SUBMETHOD_BLOCK(l_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
}

private function TeachHHSPositions( sequence & i_arr_PositionsToBeTaught[], variable & io_str_TeachLog ) void {
  private variable l_strFunctionName;
  private variable l_bool_MeasurementDone;
  private variable l_int_NullCheck;
  private variable l_int_StackCount;
  private variable l_str_LabID;
  private variable l_int_TotalPositions;
  private variable l_str_PlateLabID;
  private variable l_int_Index;
  private variable l_str_BottomLabware;
  private variable l_bln_LabwareFound;
  private variable l_flt_PlateYCoord;
  private variable l_flt_PlateXCoord;
  private file QueryFiles;
  private variable l_arr_LabwareIDs[];
  private variable l_arr_LabwareIDsTeachOrder[];
  private variable l_int_TeachIndex;
  private variable l_str_CurrentPlate;
  private dialog dialogHandle_5;
  private variable l_flt_DeltaZ;
  private variable l_str_ErrorDescription;
  private variable l_retValueDialog;
  private variable l_flt_DeltaX;
  private variable l_flt_DeltaY;
  private variable l_int_HHSID;
  l_int_TotalPositions=i_arr_PositionsToBeTaught.GetSize();
  if (l_int_TotalPositions == 0)
  {
    return;
  }
  l_strFunctionName = Translate("");
  l_strFunctionName = GetFunctionName();
  TRACE::SUBMETHOD_BLOCK(l_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
  l_bool_MeasurementDone = BOOLEON::FALSE;
  l_arr_LabwareIDs.SetSize(0);
  l_arr_LabwareIDsTeachOrder.SetSize(0);
  l_int_TotalPositions=i_arr_PositionsToBeTaught.GetSize();
  {
    for(l_int_Index = 0; l_int_Index < l_int_TotalPositions;)
    {
      l_int_Index = l_int_Index + 1;
      l_str_LabID = SeqGetLabwareId(i_arr_PositionsToBeTaught.ElementAt( l_int_Index -1));
      l_int_NullCheck = StrGetLength(l_str_LabID);
      if (l_int_NullCheck > 0)
      {
        _DetermineIfStack(l_str_LabID, l_int_StackCount, l_str_BottomLabware);
        if (l_int_StackCount > 0)
        {
          l_str_LabID = l_str_BottomLabware;
        }
        l_bln_LabwareFound = HSLExtensions::Array::ContainsValue(l_arr_LabwareIDs, l_str_LabID);
        if (l_bln_LabwareFound == BOOLEON::FALSE)
        {
          l_arr_LabwareIDs.AddAsLast(l_str_LabID);
        }
      }
    }
  }
  QueryFiles.AddField("LAB_ID", l_str_PlateLabID, hslString, 255);
  QueryFiles.AddField("X_COORD", l_flt_PlateXCoord, hslFloat);
  QueryFiles.AddField("Y_COORD", l_flt_PlateYCoord, hslFloat);
  if( 0 == QueryFiles.Open(STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH + " " + "PLATES", hslRead, "SELECT [LAB_ID], [X_COORD], [Y_COORD] FROM [PLATES] ORDER BY X_COORD ASC, Y_COORD DESC") )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH, "HxMetEdCompCmd");
  }
  {
    while (
       (QueryFiles.Eof() == 0)
    )
    {
      if( 0 == QueryFiles.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      l_bln_LabwareFound = HSLExtensions::Array::ContainsValue(l_arr_LabwareIDs, l_str_PlateLabID);
      if (l_bln_LabwareFound == BOOLEON::TRUE)
      {
        l_arr_LabwareIDsTeachOrder.AddAsLast(l_str_PlateLabID);
      }
    }
  }
  if( 0 != QueryFiles.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  QueryFiles.RemoveFields();
  Util2::Debug::TraceArray(Translate("Labware Position Teach Order"), l_arr_LabwareIDsTeachOrder);
  {
    for(l_int_TeachIndex = 0; l_int_TeachIndex < l_int_TotalPositions;)
    {
      l_int_TeachIndex = l_int_TeachIndex + 1;
      l_str_CurrentPlate=l_arr_LabwareIDsTeachOrder.GetAt(l_int_TeachIndex-1);
      STAR_TEACHING::TEACH_POSITION::CARRIER = Translate("");
      STAR_TEACHING::TEACH_POSITION::CONFIG_FILE = Translate("");
      STAR_TEACHING::TEACH_POSITION::CURRENT_X = 0.0;
      STAR_TEACHING::TEACH_POSITION::CURRENT_Y = 0.0;
      STAR_TEACHING::TEACH_POSITION::CURRENT_Z = 0.0;
      STAR_TEACHING::TEACH_POSITION::LAB_ID = Translate("");
      STAR_TEACHING::TEACH_POSITION::LAB_NAME = Translate("");
      STAR_TEACHING::TEACH_POSITION::SITE = Translate("");
      STAR_TEACHING::TEACH_POSITION::TEACH_INDEX = Translate("");
      onerror goto errLabel_6 ;
      err.Clear();
      POSITION_TEACHING_CONTROLLER::GetLabwareInformation(l_str_CurrentPlate);
      l_retValueDialog = POSITION_TEACHING_CONTROLLER::ConfirmCurrentLabware(ML_STAR);
      if (l_retValueDialog == 1)
      {
        STATUS_UPDATE_CONTROLLER::SetStatusText(l_str_CurrentPlate, BOOLEON::FALSE, BOOLEON::FALSE, BOOLEON::TRUE);
        STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("Set HHS Position"), BOOLEON::FALSE, BOOLEON::TRUE, BOOLEON::TRUE);
        _SetHHSPosition(l_str_CurrentPlate, l_int_HHSID);
        STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("Measure X/Y/Z location"), BOOLEON::FALSE, BOOLEON::TRUE, BOOLEON::TRUE);
        POSITION_TEACHING_CONTROLLER::MeasureLabwarePosition(ML_STAR, l_flt_DeltaX, l_flt_DeltaY, l_flt_DeltaZ);
        STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("Release Plate"), BOOLEON::FALSE, BOOLEON::TRUE, BOOLEON::TRUE);
        HSLHamHeaterShaker::SetPlateLock(l_int_HHSID, 0);
        STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("Update log file and save deck"), BOOLEON::FALSE, BOOLEON::TRUE, BOOLEON::TRUE);
        POSITION_TEACHING_CONTROLLER::UpdateLogFile(ML_STAR, l_flt_DeltaX, l_flt_DeltaY, l_flt_DeltaZ, io_str_TeachLog);
        POSITION_TEACHING_CONTROLLER::SaveTheDeck(ML_STAR);
        l_bool_MeasurementDone = BOOLEON::TRUE;
        STATUS_UPDATE_CONTROLLER::SetStatusText(Translate(""), BOOLEON::FALSE, BOOLEON::FALSE, BOOLEON::FALSE);
      }
      errLabel_6 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        MECC::TraceComment(Translate("################################################################\nISSUE TEACHING POSITION\n################################################################"));
        STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("There was an issue teaching position!"), BOOLEON::FALSE, BOOLEON::TRUE, BOOLEON::TRUE);
        STATUS_UPDATE_CONTROLLER::SetStatusText(Translate(""), BOOLEON::FALSE, BOOLEON::FALSE, BOOLEON::FALSE);
        MOVEMENT_CONTROLLER::MoveChannelToZCoord(ML_STAR, 245.0);
        TEACHING_SUPPORT::Deck_Visualize_Position(ML_STAR, STAR_TEACHING::TEACH_POSITION::LAB_ID, STAR_TEACHING::TEACH_POSITION::TEACH_INDEX, 3);
        TEACHING_SUPPORT::Deck_Visualize(ML_STAR, STAR_TEACHING::TEACH_POSITION::LAB_ID, 4);
        if (l_int_HHSID != 0)
        {
          HSLHamHeaterShaker::SetPlateLock(l_int_HHSID, 0);
        }
        l_str_ErrorDescription = ErrGetDescription();
        dialogHandle_5.SetOutput(Translate("There was an issue measuring the labware's position.  Find a description below:"), Translate("\n\n"), l_str_ErrorDescription);
        dialogHandle_5.ShowOutput(Translate("Issue teaching well"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }   /* end if from skip handler if no error */
    }
  }
  POSITION_TEACHING_CONTROLLER::ResetLabwareVisState(ML_STAR);
  TRACE::SUBMETHOD_BLOCK(l_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
}

private function InitHHS(  ) void {
  private variable l_strFunctionName;
  private variable l_HHS_1;
  private variable l_HHS_2;
  private variable l_HHS_3;
  private variable l_HHS_4;
  private variable l_HHS_5;
  private variable int_ReturnHHS;
  l_strFunctionName = Translate("");
  l_strFunctionName = GetFunctionName();
  TRACE::SUBMETHOD_BLOCK(l_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
  STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("Inialize HHS"), BOOLEON::FALSE, BOOLEON::FALSE, BOOLEON::TRUE);
  l_HHS_1 = 0;
  l_HHS_2 = 0;
  l_HHS_3 = 0;
  l_HHS_4 = 0;
  l_HHS_5 = 0;
  HSLHamHeaterShaker::SetSimulation(STAR_TEACHING::BOOL::SIMULATION_MODE);
  int_ReturnHHS = HSLHamHeaterShaker::CreateUsbDevice(1, l_HHS_1);
  _HHS_HandleReturnValue(int_ReturnHHS);
  int_ReturnHHS = HSLHamHeaterShaker::CreateUsbDevice(2, l_HHS_2);
  _HHS_HandleReturnValue(int_ReturnHHS);
  int_ReturnHHS = HSLHamHeaterShaker::CreateUsbDevice(3, l_HHS_3);
  _HHS_HandleReturnValue(int_ReturnHHS);
  int_ReturnHHS = HSLHamHeaterShaker::CreateUsbDevice(4, l_HHS_4);
  _HHS_HandleReturnValue(int_ReturnHHS);
  int_ReturnHHS = HSLHamHeaterShaker::CreateUsbDevice(5, l_HHS_5);
  _HHS_HandleReturnValue(int_ReturnHHS);
  STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("-- Init HHS 1"), BOOLEON::FALSE, BOOLEON::TRUE, BOOLEON::TRUE);
  int_ReturnHHS = HSLHamHeaterShaker::SetPlateLock(l_HHS_1, 1);
  _HHS_HandleReturnValue(int_ReturnHHS);
  int_ReturnHHS = HSLHamHeaterShaker::SetPlateLock(l_HHS_1, 0);
  _HHS_HandleReturnValue(int_ReturnHHS);
  STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("-- Init HHS 2"), BOOLEON::FALSE, BOOLEON::TRUE, BOOLEON::TRUE);
  int_ReturnHHS = HSLHamHeaterShaker::SetPlateLock(l_HHS_2, 1);
  _HHS_HandleReturnValue(int_ReturnHHS);
  int_ReturnHHS = HSLHamHeaterShaker::SetPlateLock(l_HHS_2, 0);
  _HHS_HandleReturnValue(int_ReturnHHS);
  STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("-- Init HHS 3"), BOOLEON::FALSE, BOOLEON::TRUE, BOOLEON::TRUE);
  int_ReturnHHS = HSLHamHeaterShaker::SetPlateLock(l_HHS_3, 1);
  _HHS_HandleReturnValue(int_ReturnHHS);
  int_ReturnHHS = HSLHamHeaterShaker::SetPlateLock(l_HHS_3, 0);
  _HHS_HandleReturnValue(int_ReturnHHS);
  STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("-- Init HHS 4"), BOOLEON::FALSE, BOOLEON::TRUE, BOOLEON::TRUE);
  int_ReturnHHS = HSLHamHeaterShaker::SetPlateLock(l_HHS_4, 1);
  _HHS_HandleReturnValue(int_ReturnHHS);
  int_ReturnHHS = HSLHamHeaterShaker::SetPlateLock(l_HHS_4, 0);
  _HHS_HandleReturnValue(int_ReturnHHS);
  STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("-- Init HHS 5"), BOOLEON::FALSE, BOOLEON::TRUE, BOOLEON::TRUE);
  int_ReturnHHS = HSLHamHeaterShaker::SetPlateLock(l_HHS_5, 1);
  _HHS_HandleReturnValue(int_ReturnHHS);
  int_ReturnHHS = HSLHamHeaterShaker::SetPlateLock(l_HHS_5, 0);
  _HHS_HandleReturnValue(int_ReturnHHS);
  t_arr_HHSIDs.AddAsLast(l_HHS_1);
  t_arr_HHSIDs.AddAsLast(l_HHS_2);
  t_arr_HHSIDs.AddAsLast(l_HHS_3);
  t_arr_HHSIDs.AddAsLast(l_HHS_4);
  t_arr_HHSIDs.AddAsLast(l_HHS_5);
  STATUS_UPDATE_CONTROLLER::SetStatusText(Translate(""), BOOLEON::FALSE, BOOLEON::FALSE, BOOLEON::FALSE);
  TRACE::SUBMETHOD_BLOCK(l_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
}

private function _SetHHSPosition( variable i_str_CurrentLabwareID, variable & o_int_HHSID ) void {
  private variable l_bln_LabwareAdded;
  private dialog customDialog_7;
  private variable l_int_HHSIndex;
  private dialog customDialog_8;
  private variable l_ret_DialogSelection;
  private variable int_ReturnHHS;
  private variable l_str_Value;
  private variable l_int_Length;
  o_int_HHSID = 0;
  o_int_HHSID = 0;
  l_int_HHSIndex = 1;
  l_bln_LabwareAdded = BOOLEON::FALSE;
  l_str_Value = DevGetLabwareData(ML_STAR, i_str_CurrentLabwareID, t_str_LabwareHHSProperty);
  l_int_Length = StrGetLength(l_str_Value);
  if (l_int_Length > 0)
  {
    l_int_HHSIndex = StrIVal(l_str_Value);
  }
  {
    while (l_bln_LabwareAdded == BOOLEON::FALSE)
    {
      customDialog_7.InitCustomDialog("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");
      customDialog_7.SetCustomDialogProperty( "comboBox1.SelectedIndex", l_int_HHSIndex );
      customDialog_7.ShowCustomDialog();
      retValueDialog = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
      l_int_HHSIndex = customDialog_7.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
      o_int_HHSID=t_arr_HHSIDs.GetAt(l_int_HHSIndex-1);
      int_ReturnHHS = HSLHamHeaterShaker::SetPlateLock(o_int_HHSID, 1);
      _HHS_HandleReturnValue(int_ReturnHHS);
      int_ReturnHHS = HSLHamHeaterShaker::StartShakerTimed(o_int_HHSID, 500, 1);
      _HHS_HandleReturnValue(int_ReturnHHS);
      int_ReturnHHS = HSLHamHeaterShaker::WaitForShaker(o_int_HHSID);
      _HHS_HandleReturnValue(int_ReturnHHS);
      int_ReturnHHS = HSLHamHeaterShaker::SetPlateLock(o_int_HHSID, 1);
      _HHS_HandleReturnValue(int_ReturnHHS);
      customDialog_8.InitCustomDialog("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");
      customDialog_8.ShowCustomDialog();
      l_ret_DialogSelection = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
      if (l_ret_DialogSelection == 6)
      {
        l_bln_LabwareAdded = BOOLEON::TRUE;
      }
    }
  }
  LPQ::ADJUST_SetPropertiesForLabwareID(ML_STAR, i_str_CurrentLabwareID, t_str_LabwareHHSProperty, l_int_HHSIndex);
}

private function _HHS_HandleReturnValue( variable i_intErrorCode ) void {
  private variable l_strDecodedErrorText;
  private variable l_strErrorMessage;
  if (i_intErrorCode != 0)
  {
    if (i_intErrorCode == 1)
    {
      l_strDecodedErrorText = Translate("Fatal error.");
    }
    if (i_intErrorCode == 2)
    {
      l_strDecodedErrorText = Translate("Used node is not initialized.");
    }
    if (i_intErrorCode == 3)
    {
      l_strDecodedErrorText = Translate("Device not connected.");
    }
    if (i_intErrorCode == 4)
    {
      l_strDecodedErrorText = Translate("CAN error.");
    }
    if (i_intErrorCode == 5)
    {
      l_strDecodedErrorText = Translate("No communication to EEPROM.");
    }
    if (i_intErrorCode == 6)
    {
      l_strDecodedErrorText = Translate("Unknown command.");
    }
    if (i_intErrorCode == 7)
    {
      l_strDecodedErrorText = Translate("Unknown parameter.");
    }
    if (i_intErrorCode == 8)
    {
      l_strDecodedErrorText = Translate("Parameter out of range.");
    }
    if (i_intErrorCode == 9)
    {
      l_strDecodedErrorText = Translate("Voltage outside permitted range.");
    }
    if (i_intErrorCode == 10)
    {
      l_strDecodedErrorText = Translate("Stop received.");
    }
    if (i_intErrorCode == 11)
    {
      l_strDecodedErrorText = Translate("Wrong system address.");
    }
    if (i_intErrorCode == 12)
    {
      l_strDecodedErrorText = Translate("Parallel commands are nor allowed.");
    }
    if (i_intErrorCode == 13)
    {
      l_strDecodedErrorText = Translate("Shaker initialization failed.");
    }
    if (i_intErrorCode == 14)
    {
      l_strDecodedErrorText = Translate("Shaker not initialized.");
    }
    if (i_intErrorCode == 15)
    {
      l_strDecodedErrorText = Translate("Shaker step loss.");
    }
    if (i_intErrorCode == 16)
    {
      l_strDecodedErrorText = Translate("Shaker start mode.");
    }
    if (i_intErrorCode == 17)
    {
      l_strDecodedErrorText = Translate("Plate lock initialization failed.");
    }
    if (i_intErrorCode == 18)
    {
      l_strDecodedErrorText = Translate("Plate lock not initialized.");
    }
    if (i_intErrorCode == 19)
    {
      l_strDecodedErrorText = Translate("Plate lock step loss.");
    }
    if (i_intErrorCode == 20)
    {
      l_strDecodedErrorText = Translate("Temperature controlling not started.");
    }
    if (i_intErrorCode == 21)
    {
      l_strDecodedErrorText = Translate("Time out of temperature supervision.");
    }
    if (i_intErrorCode == 22)
    {
      l_strDecodedErrorText = Translate("Temperature out of supervision range.");
    }
    if (i_intErrorCode == 23)
    {
      l_strDecodedErrorText = Translate("Temperature out of security range.");
    }
    if (i_intErrorCode == 24)
    {
      l_strDecodedErrorText = Translate("Temperature sensor problem.");
    }
    if (i_intErrorCode == 25)
    {
      l_strDecodedErrorText = Translate("Time out during send of a command.");
    }
    if (i_intErrorCode == 26)
    {
      l_strDecodedErrorText = Translate("Unknown firmware error.");
    }
    if (i_intErrorCode == 27)
    {
      l_strDecodedErrorText = Translate("Input parameter must be an string.");
    }
    if (i_intErrorCode == 28)
    {
      l_strDecodedErrorText = Translate("Input parameter must be an integer.");
    }
    if (i_intErrorCode == 29)
    {
      l_strDecodedErrorText = Translate("Input parameter must be an double.");
    }
    if (i_intErrorCode == 30)
    {
      l_strDecodedErrorText = Translate("Needed node not installed or switched off.");
    }
    if (i_intErrorCode == 31)
    {
      l_strDecodedErrorText = Translate("Unknown firmware result string format.");
    }
    if (i_intErrorCode == 32)
    {
      l_strDecodedErrorText = Translate("Wrong length of parameter.");
    }
    Trace ("HHS ERROR CODE:  ", i_intErrorCode);
    Trace ("HHS ERROR DECODED MESSSAGE:  ", l_strDecodedErrorText);
    l_strErrorMessage = StrConcat8(Translate("CPAC_Report Error handler has written more detailed information into the logfile."), Translate("HHS ERROR CODE:  "), i_intErrorCode, Translate("HHS ERROR DECODED MESSSAGE:  "), l_strDecodedErrorText, Translate(""), Translate(""), Translate(""));
    _DATA_IntegratedAbortHandler(Translate("NGSStarPrep.smt "), l_strErrorMessage);
  }
}

private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void {
  private dialog customDialog_9;
  private variable l_retValueDialog;
  customDialog_9.InitCustomDialog("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");
  customDialog_9.SetCustomDialogProperty( "textBlock5.Text", i_strFunctionName );
  customDialog_9.SetCustomDialogProperty( "textBlock6.Text", i_strAbortMessage );
  customDialog_9.ShowCustomDialog();
  l_retValueDialog = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
  abort;
}

private function RestoreDeck(  ) void {
  private variable l_strFunctionName;
  private variable l_retValueDialog;
  private variable l_str_DeckLayoutFileName;
  private variable l_arr_Temp[];
  private variable l_arr_DeckExists;
  private variable l_int_Index;
  private variable l_str_CurrentDeckLayout;
  private dialog customDialog_10;
  private variable l_arr_ShortNames[];
  private variable l_arr_FileNames[];
  private dialog customDialog_11;
  private variable l_int_RestoreSelection;
  private variable l_bln_CreateBackUpFirst;
  private variable l_str_CurrentBackUp;
  private dialog customDialog_12;
  private variable l_str_BackUpFile;
  l_strFunctionName = Translate("");
  l_strFunctionName = GetFunctionName();
  TRACE::SUBMETHOD_BLOCK(l_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
  l_str_DeckLayoutFileName = DevGetDeckLayoutFileName(ML_STAR);
  l_str_DeckLayoutFileName = HSLExtensions::File::GetFileNameWithoutExtension(l_str_DeckLayoutFileName);
  l_arr_Temp = HSLExtensions::Array::FindValue(t_arr_AvailableDeckLayouts, l_str_DeckLayoutFileName);
  l_arr_DeckExists=l_arr_Temp.GetSize();
  l_int_Index = 1;
  if (l_arr_DeckExists > 0)
  {
    l_int_Index=l_arr_Temp.GetAt(1-1);
  }
  {
    while (BOOLEON::TRUE == BOOLEON::TRUE)
    {
      customDialog_10.InitCustomDialog("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");
      customDialog_10.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", t_arr_AvailableDeckLayouts );
      customDialog_10.SetCustomDialogProperty( "comboBox1.SelectedIndex", l_int_Index );
      customDialog_10.ShowCustomDialog();
      l_retValueDialog = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
      l_int_Index = customDialog_10.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
      if (l_retValueDialog == DIALOGS::CANCEL)
      {
        MECC::TraceComment(Translate("----- CANCEL"));
        return;
        TRACE::SUBMETHOD_BLOCK(l_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
      }
      l_str_CurrentDeckLayout=t_arr_AvailableDeckLayouts.GetAt(l_int_Index-1);
      DECKBACKUPUTILITY::GetBackUpFileList2(ML_STAR, STAR_TEACHING::BACKUP_LOG::PATH, l_str_CurrentDeckLayout, l_arr_FileNames, l_arr_ShortNames);
      customDialog_11.InitCustomDialog("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");
      customDialog_11.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", l_arr_ShortNames );
      customDialog_11.ShowCustomDialog();
      l_retValueDialog = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
      l_int_RestoreSelection = customDialog_11.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
      l_bln_CreateBackUpFirst = customDialog_11.GetCustomDialogProperty( "checkBox1.IsChecked" );
      if (l_retValueDialog == DIALOGS::OK)
      {
        MECC::TraceComment(Translate("======================= RESTORE TO PREVIOUS DECK"));
        l_str_CurrentBackUp=l_arr_ShortNames.GetAt(l_int_RestoreSelection-1);
        if (l_bln_CreateBackUpFirst == BOOLEON::TRUE)
        {
          DECKBACKUPUTILITY::BackUpDeck(ML_STAR, STAR_TEACHING::BACKUP_LOG::PATH);
        }
        l_str_BackUpFile = StrConcat8(STAR_TEACHING::BACKUP_LOG::PATH, Translate(""), l_str_CurrentDeckLayout, Translate("\\"), l_arr_FileNames.ElementAt( l_int_RestoreSelection -1), Translate(".zip"), Translate(""), Translate(""));
        DECKBACKUPUTILITY::RestoreDeck_MoveOnly(ML_STAR, l_str_BackUpFile, BOOLEON::FALSE);
        customDialog_12.InitCustomDialog("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");
        customDialog_12.ShowCustomDialog();
        break;
      }
    }
  }
  TRACE::SUBMETHOD_BLOCK(l_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
}
