 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Qiagen\\QIAseq RNA Fusion XP Panels\\Library\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Qiagen\\QIAseq RNA Fusion XP Panels\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Qiagen\\QIAseq RNA Fusion XP Panels\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Qiagen\\QIAseq RNA Fusion XP Panels\\Library\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "HSLAppsLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Qiagen\\QIAseq RNA Fusion XP Panels\\Library\\InitWorkListLocation.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "VectorCustomDialogs\\VectorCustomDialogs.hsl" }
 namespace _Method { #include "AssignColorScheme\\ColorSchemeLibrary.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Qiagen\\QIAseq RNA Fusion XP Panels\\Library\\NGSStarLoading\\NGSStarLoading.hs_" }
 namespace _Method { #include "Stack_Reducer\\StackReducer.hs_" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Qiagen\\QIAseq RNA Fusion XP Panels\\Library\\NGSStarLoading\\NGSStarLoading.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Qiagen\\QIAseq RNA Fusion XP Panels\\Library\\NGSStarProcesses.hs_" }
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Qiagen\\QIAseq RNA Fusion XP Panels\\Methods\\QIAseq RNA Fusion XP Panels.res"
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Qiagen\\QIAseq RNA Fusion XP Panels\\Library\\Tools\\Tools_Library.hs_" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Qiagen\\QIAseq RNA Fusion XP Panels\\Library\\NGSStarLoading\\ARW_Global.hsl" }
sequence t_seqMlStarSequenceNotUsed;
sequence t_seqMIDI_OnMagnet;
sequence t_seqHSP_Pipette;
sequence t_trpHSP_ODTC;
sequence t_trpHamiltonComfortLidODTC;
sequence t_trp_Stack1;
sequence t_trpHamiltonComfortLidStackParkPos;
sequence t_trp_Stack4;
sequence t_trpHSP_Pipette2;
sequence t_trpMIDI_Pipette;
sequence t_trpMIDI_OnMagnet;
sequence t_trpHSP_Waste;
sequence t_trpMIDI_Waste;
sequence t_seqMIDI_Pipette;
sequence t_seqHSP_Pipette2;
sequence t_trpHamiltonComfortLidWaste;
variable t_intHHS1_HSP1;
variable t_intHHS2_HSP2;
variable t_intHHS3_HSP3_MIDI3;
variable t_intHHS4_MIDI1;
variable t_intHHS5_MIDI2;
variable t_arrIndex1PositionIDs[];
variable t_arrIndex2PositionIDs[];
variable t_arrSamplePositionIDs[];
variable t_arrAdapterLigatioPlateLabwareID[];
variable t_arrAdapterLigationPlatePositionIDs[];
variable t_blnODTCused;
variable t_blnSendEmails;
variable t_intRequiredNumberOf1000uLTipsM3;
variable t_intRequiredNumberOf1000uLTipsM4;
variable t_intRequiredNumberOf1000uLTipsM5;
variable t_intRequiredNumberOf300uLTipsM3;
variable t_intRequiredNumberOf300uLTipsM4;
variable t_intRequiredNumberOf300uLTipsM5;
variable t_intRequiredNumberOf50uLTipsM3;
variable t_intRequiredNumberOf50uLTipsM4;
variable t_intRequiredNumberOf50uLTipsM5;
variable t_strSerialNumberMLStar;
variable t_intSelectedIndexSTART;
variable t_intSelectedIndexSTOP;
variable t_strLocalIPAddressOfComputer;
variable t_strEmailAdress;
variable t_strDeviceAddressODTC;
variable t_intNumberOfSamplesFromFile;
variable t_intDeviceNumberODTC;
variable t_blnTestODTCWithShortDummyProtocol;
variable t_intRequiredNumberOf300uLTipsM2;
variable t_intRequiredNumberOf50uLTipsM2;
variable t_intRequiredNumberOf1000uLTipsM2;
variable t_strODTCFolderXML;
variable t_blnShortenPreheat;
sequence t_seqHHS3_MIDI;
sequence t_trpHHS3_MIDI;
variable t_strPCRProgramODTC;
variable t_arrBlnProcessActivation[];
variable t_blnSkipLoadingRoutine;
sequence t_seqAspirate_Ethanol80;
variable t_intRequestIDForActiveProtocol;
variable t_intTimeForProtocol;
variable l_arrEndDialogListInformation[];
variable t_blnStoreHSPoverNightWithinODTC;
variable t_blnStoreAtRoomTemperature;
variable t_blnSimulationMode;
variable t_blnUseMPHInsteadOfChannels;
variable t_strFullPathReportFile;
variable t_blnReduceDeckTo4ChannelSystem;
variable t_intRequiredNumberOf50uLTipsM1;
variable t_intRequiredNumberOf1000uLTipsM1;
variable t_intRequiredNumberOf300uLTipsM1;
variable t_blnPostponedPrimerLoading;
variable t_strODTCDirectory;
variable t_str_PlatformUsed;
variable t_strHamiltonDirectory;
variable t_blnActivateLockUnlockOfFrontCover;
variable l_intPlatformUsed;
variable l_int_rtnErrorDialog;
global device ML_STAR ("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Qiagen\\QIAseq RNA Fusion XP Panels\\Methods\\QIAseq RNA Fusion XP Panels.lay", "ML_STAR", hslTrue);
variable t_strTipCounterNameTip300;
variable t_strTipCounterNameTip50;
variable t_strTipCounterNameTip1000;
variable t_intMaxPlatesPerStackHSP;
variable t_intMaxPlatesPerStackMIDI;
variable t_intMaxComfortLidPerStack;
variable t_str_KitTitle;
variable t_str_KitSupplier;
variable t_blnMeasureVolumeWithinTroughs;
sequence l_seqTip50;
sequence l_seqTip1000;
sequence l_seqTip300;
variable t_strMethodName;
variable l_strMethodName;
variable t_intColumnsToProcessPerBatch;
variable t_blnDeactivatePipettingStepsForTransportTests;
variable t_intNGSPlatform;
variable t_blnUseNGSSTARMOA;
variable t_strEmailAdressReciever;
variable l_intLengthEmailAddress;
variable t_intRequiredNumberOf1000uLTipsM6;
variable t_intRequiredNumberOf1000uLTipsM7;
variable t_intRequiredNumberOf1000uLTipsM8;
variable t_intRequiredNumberOf300uLTipsM6;
variable t_intRequiredNumberOf300uLTipsM7;
variable t_intRequiredNumberOf300uLTipsM8;
variable t_intRequiredNumberOf50uLTipsM6;
variable t_intRequiredNumberOf50uLTipsM7;
variable t_intRequiredNumberOf50uLTipsM8;
variable t_intRequiredNumberOf50uLTipsM0;
variable t_intRequiredNumberOf1000uLTipsM0;
variable t_intRequiredNumberOf300uLTipsM0;
variable t_blnActivateTestMethod;
variable t_blnPlateToPlateTransferCheck;
variable t_blnODTCMovementCheck;
variable t_fltVolumeSampleInput;
variable t_int_NumberOfODTCTransportCycles;
variable t_arrBlnPositionActivation[];
variable t_arr_strCoordinates[];
sequence t_trpHSP_Pipette;
sequence t_trpHSP_OnMagnet;
sequence t_seqHSP_OnMagnet;
variable t_str_PicturesDirectoryUsed;
variable t_intSelectedIndexAspirationPosition;
variable t_intSelectedIndexDispensePosition;
variable t_blnUse50ulTips;
variable t_blnUse300ulTips;
sequence t_seqDispensePosition;
sequence t_seqAspirationPosition;
variable t_flt_AspHeightPlateToPlateTransferCheck;
variable t_flt_VolumePlateToPlateTransferCheck;
sequence t_seqHHS4_MIDI;
sequence t_seqHHS1_HSP;
sequence t_seqHHS2_HSP;
sequence t_seqHHS3_HSP;
sequence t_trpHHS5_MIDI;
sequence t_trpHHS4_MIDI;
sequence t_trpHHS1_HSP;
sequence t_trpHHS2_HSP;
sequence t_trpHHS3_HSP;
sequence t_seqHHS5_MIDI;
sequence t_seqAspirate_QIAseqBeads;
sequence t_seqAspirate_Ethanol80_distinct;
sequence t_seqAspirate_QIAseqBeads_distinct;
sequence t_seqAspirate_Water_distinct;
sequence t_seqAspirate_Water;
variable t_arr_strProcessID[];
sequence t_trpHSP_StackOut;
sequence t_seqHSP_Pipette_IndexPlate;
variable t_blnRemoveEthanolSupernatantWith50ulTips;
sequence t_trpMIDI_CPAC;
sequence t_seqMIDI_CPAC;
sequence t_trpHSP_CPAC;
sequence t_seqHSP_CPAC;
variable t_blnSkipInkubationTimes;
variable t_arrPanelID[];
variable t_arrIndexPositionIDs[];
variable t_arrIndexSet[];
variable t_arrNumberPanelID[];
variable t_intNumberOfPanels;
variable t_arrListOfPanelIDs[];
variable t_arrPanelPositionIDs[];
variable t_intOneOrTwoIndexSets;
variable t_arrIndexIDs[];
variable t_arrListOfIndexSets[];
variable t_arrNumberIndexSet[];
variable t_blnUseQiagenCleanUp;
variable t_intPreOrPostSystem;
variable t_blnSkipLoadingDialogs;
variable t_blnUseTipExchange;
variable t_intUsedTransportSequence;
sequence t_trpODTCMovementCheck;
variable t_fltVolumeP01_FSSynthesisRTReactionMixing;
variable t_fltVolumeP01_FSSynthesisRTMix;
variable t_fltVolumeP01_RPPrimerII;
variable t_fltVolumeP01_FSSynthesisRPPrimerIIMix;
variable t_fltVolumeP02_SecondStrandSynthMix;
variable t_fltVolumeP02_ReactionMixing;
variable t_fltVolumeP04_i7Adapter;
variable t_fltVolumeP04_LigationReactionMixing;
variable t_blnPostponedAdapterLoading;
variable t_fltVolumeP04_AdapterLigationMix;
sequence t_seqAspirate_ERATMix;
sequence t_seqAspirate_LigationMix;
sequence t_seqAspirate_SecondStrandMix;
sequence t_seqAspirate_QIAseqRNAFusionXPPanel;
sequence t_seqAspirate_FirstStrandMix;
sequence t_seqHHS2_HSP_IndexAdapterSet2;
sequence t_seqHHS2_HSP_IndexPrimerSet2;
sequence t_seqAspirate_RPPrimerII;
sequence t_seqAspirate_UniversalPCRMix;
sequence t_seqHHS1_HSP_IndexPrimerSet1;
sequence t_seqHHS1_HSP_IndexAdapterSet1;
variable t_fltVolumeP02_SecondStrandMixMixing;
sequence t_seqAspirate_SecondStrandMix_distinct;
variable t_fltVolumeP03_ERATReactionMixing;
variable t_fltVolumeP03_ERATMixTubeMixing;
variable t_fltVolumeP03_ERATMix;
sequence t_seqAspirate_ERATMix_distinct;
variable t_fltVolumeP04_LigationMixTubeMixing;
sequence t_seqAspirate_LigationMix_distinct;
sequence t_trpHSP_Pipette3;
sequence t_seqHSP_Pipette3;
variable t_blnReturnAdapterPlateDiscard;
variable t_blnReturnAdapterPlateEndOfMethod;
variable t_blnReturnAdapterPlateDuringIncubation;
variable t_fltVolumeP05_QIAseqBeads1;
variable t_fltVolumeP05_FirstSupernatant1;
variable t_fltVolumeP05_QIAseqBeads2;
variable t_fltVolumeP05_FirstSupernatant2;
variable t_fltVolumeP05_NucleaseFreeWater_FirstElution;
variable t_fltVolumeP05_ReactionProduct;
variable t_fltVolumeP05_NucleaseFreeWater_SecondElution;
variable t_fltVolumeP05_Ethanol;
variable t_intRequiredNumberOf1000uLTipsM9;
variable t_fltVolumeP07_SPEReaction;
variable t_fltVolumeP07_Ethanol;
variable t_intRequiredNumberOf300uLTipsM9;
variable t_fltVolumeP06_SPEReactionMix;
variable t_fltVolumeP07_Eluat;
variable t_intRequiredNumberOf50uLTipsM9;
variable t_fltVolumeP06_SPEReactionMixing;
variable t_fltVolumeP07_NucleaseFreeWater;
variable t_fltVolumeP07_QIAseqBeads;
sequence t_seqAspirate_QIAseqRNAFusionXPPanelAll;
variable t_fltVolumeP07_WaterForElution;
variable t_fltVolumeP08_ReactionMixing;
variable t_fltVolumeP07_FirstSupernatant;
variable t_fltVolumeP08_Eluat;
variable t_fltVolumeP08_UPCRMix;
variable t_fltVolumeP08_UPCRMixMixing;
variable t_fltVolumeP08_UPCRReaction;
variable t_fltVolumeP09_UPCR;
variable t_fltVolumeP09_QIAseqBeads;
variable t_fltVolumeP09_Eluat;
variable t_fltVolumeP09_WaterForElution;
variable t_fltVolumeP09_NucleaseFreeWater;
variable t_fltVolumeP09_Ethanol;
variable t_fltVolumeP09_FirstSupernatantMixing;
variable t_fltVolumeP09_FirstSupernatant;
variable t_fltVolumeP05_2ndEluat;
variable t_fltVolumeP01_FastSelect;
variable t_blnFastSelectDepletion;
sequence t_seqAspirate_DilutedFastSelect;
variable t_fltVolumeP01_FastSelectReactionMixing;
variable t_arr_fltReagentMixingVolumesOnAdapterTubeCarrier_FusionXPPanel[];
sequence t_seqAspirate_UniversalPCRMix_distinct;
variable t_fltVolumeP01_RPPrimerIIAndFastSelect;
variable t_blnDisplaySwitchSettingsDialog;
variable t_blnReduceBeadVolume;
sequence t_seqAspirate_QIAseqRNAFusionXPPanel_distinct;
sequence t_seqAspirate_FirstStrandMix_distinct;
sequence t_seqAspirate_MixSPEPanels;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable l_intCOREGripper(2); // Choose transport tool CORE Gripper to perform transport steps with CORE gripper instead of iswap. Value = 2
    private variable l_strChannelPatternAbort;
    private variable l_intResultTipCheck;
    private variable l_intTransportTool;
    private variable l_int_OptionSelected;
    private variable loopCounter1;
    private variable l_strLastMessage;
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIP_PRESENT_CHECK_5ML_1ML::_InitLibrary();
    NGSSTARPREP::_InitLibrary();
    NGSSTARPROCESSES::_InitLibrary();
    COLORSCHEMELIBRARY::_InitLibrary();
    NGSSTARLOADING::_InitLibrary();
    STACKREDUCER::_InitLibrary();
    STAR_TIP_TOOLS::_InitLibrary();
    TOOLS_LIBRARY::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
    INIT_WORKLIST_LOCATION::LockLibrary();
    t_intNGSPlatform = 4;
    t_intPreOrPostSystem = 3;
    t_blnActivateTestMethod = ASWGLOBAL::BOOL::FALSE;
    t_blnRemoveEthanolSupernatantWith50ulTips = ASWGLOBAL::BOOL::FALSE;
    t_blnPostponedAdapterLoading = ASWGLOBAL::BOOL::FALSE;
    t_blnPostponedPrimerLoading = ASWGLOBAL::BOOL::FALSE;
    t_blnSkipLoadingRoutine = ASWGLOBAL::BOOL::TRUE;
    t_blnSkipLoadingDialogs = ASWGLOBAL::BOOL::FALSE;
    t_blnDeactivatePipettingStepsForTransportTests = ASWGLOBAL::BOOL::FALSE;
    t_blnODTCused = ASWGLOBAL::BOOL::TRUE;
    t_blnTestODTCWithShortDummyProtocol = ASWGLOBAL::BOOL::FALSE;
    t_blnSkipInkubationTimes = ASWGLOBAL::BOOL::FALSE;
    t_blnActivateLockUnlockOfFrontCover = ASWGLOBAL::BOOL::FALSE;
    t_blnMeasureVolumeWithinTroughs = ASWGLOBAL::BOOL::FALSE;
    t_intColumnsToProcessPerBatch = 3;
    t_blnDisplaySwitchSettingsDialog = ASWGLOBAL::BOOL::TRUE;
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("+-+-+-+-+ t_intNGSPlatform (1 = NGSStar channels, 2 = clinical NGSStarlet v1, 3 = NGSStar96, 4 = NGSStar MOA):   "), t_intNGSPlatform, Translate("\n +-+-+-+-+ t_blnActivateTestMethod:   "), t_blnActivateTestMethod, Translate("\n +-+-+-+-+ t_blnUseQiagenCleanUp:   "), t_blnUseQiagenCleanUp, Translate("+-+-+-+-+ t_blnRemoveEthanolSupernatantWith50ulTips:   "), t_blnRemoveEthanolSupernatantWith50ulTips, Translate("+-+-+-+-+ t_blnPostponedPrimerLoading:   "), t_blnPostponedPrimerLoading);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("+-+-+-+ t_blnSkipLoadingRoutine:   "), t_blnSkipLoadingRoutine, Translate("+-+-+-+ t_blnSkipLoadingDialogs:   "), t_blnSkipLoadingDialogs, Translate("\n +-+-+-+ t_blnDeactivatePipettingStepsForTransportTests:   "), t_blnDeactivatePipettingStepsForTransportTests, Translate("\n +-+-+-+ t_blnODTCused:   "), t_blnODTCused, Translate("\n++-+-+ t_blnTestODTCWithShortDummyProtocol:   "), t_blnTestODTCWithShortDummyProtocol);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("\n +-+-+-+ t_blnSkipInkubationTimes:   "), t_blnSkipInkubationTimes, Translate("+-+-+-+-+ t_blnActivateLockUnlockOfFrontCover:   "), t_blnActivateLockUnlockOfFrontCover, Translate("\n +-+-+-+-+ t_blnMeasureVolumeWithinTroughs:   "), t_blnMeasureVolumeWithinTroughs, Translate("\n +-+-+-+-+ t_intColumnsToProcessPerBatch:   "), t_intColumnsToProcessPerBatch, Translate("\n +-+-+-+-+ t_intPreOrPostSystem (1 = Pre-PCRSystem, 2 = Post-PCR System, 3 = PreAndPost System):   "), t_intPreOrPostSystem);
    if (t_intNGSPlatform == 2)
    {
      t_blnReduceDeckTo4ChannelSystem = ASWGLOBAL::BOOL::TRUE;
    }
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      t_str_PlatformUsed = Translate("ClinicalNGSStarlet");
      t_str_PicturesDirectoryUsed = Translate("ClinicalNGSStarlet");
      l_intPlatformUsed = 2;
      t_intMaxPlatesPerStackMIDI = 3;
      t_intMaxPlatesPerStackHSP = 5;
      t_intMaxComfortLidPerStack = 5;
    }
    else
    {
      t_str_PlatformUsed = Translate("NGSStar");
      t_str_PicturesDirectoryUsed = Translate("NGSStarChannel");
      l_intPlatformUsed = 1;
      t_intMaxPlatesPerStackMIDI = 4;
      t_intMaxPlatesPerStackHSP = 4;
      t_intMaxComfortLidPerStack = 5;
    }
    if (t_intNGSPlatform > 2)
    {
      t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::TRUE;
      t_str_PicturesDirectoryUsed = Translate("NGSStarMPH");
    }
    else
    {
      t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::FALSE;
    }
    if (t_intNGSPlatform == 4)
    {
      t_blnUseNGSSTARMOA = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      t_blnUseNGSSTARMOA = ASWGLOBAL::BOOL::FALSE;
    }
    t_strHamiltonDirectory = Translate("C:\\Program Files (x86)\\Hamilton\\");
    t_str_KitSupplier = Translate("Qiagen");
    t_str_KitTitle = Translate("QIAseq RNA Fusion XP Panels");
    l_strMethodName = StrConcat4(t_str_KitSupplier, Translate("_"), t_str_KitTitle, Translate(""));
    t_strMethodName = l_strMethodName;
    t_strTipCounterNameTip50 = Translate("50F_Counter");
    t_strTipCounterNameTip300 = Translate("SVF_Counter");
    t_strTipCounterNameTip1000 = Translate("1000F_Counter");
    t_blnSimulationMode = Util::GetSimulationMode();
    t_strSerialNumberMLStar = GetSerialNumber(ML_STAR);
    NGSSTARPREP::DATA_HandOverSimulationModeForAllLocalSMTs(t_blnSimulationMode, ASWGLOBAL::BOOL::FALSE);
    l_intTransportTool = l_intCOREGripper;
    t_strODTCDirectory = Translate("Files\\ODTC_scripts\\");
    t_strODTCDirectory = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), t_strODTCDirectory, Translate(""), Translate(""), Translate(""), Translate(""));
    if (t_blnTestODTCWithShortDummyProtocol == ASWGLOBAL::BOOL::TRUE)
    {
      t_strODTCFolderXML = StrConcat4(t_strODTCDirectory, t_str_KitTitle, Translate("_shortGINIT.xml"), Translate(""));
      t_blnShortenPreheat = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      t_strODTCFolderXML = StrConcat4(t_strODTCDirectory, t_str_KitTitle, Translate("_GINIT.xml"), Translate(""));
      t_blnShortenPreheat = ASWGLOBAL::BOOL::FALSE;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("********* t_strODTCFolderXML:   "), t_strODTCFolderXML);
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      t_strDeviceAddressODTC = "192.168.1.50";
      t_strLocalIPAddressOfComputer = "192.168.1.2";
      if(0){
        t_strDeviceAddressODTC = "169.254.120.232";
        t_strLocalIPAddressOfComputer = "169.254.120.161";
      }
    }
    else
    {
      t_strDeviceAddressODTC = "No ODTC used";
    }
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    COLORSCHEMELIBRARY::Assign(0);
    VectorCustomDialogs::Initialize();
    l_strLastMessage = StrConcat2(Translate("Library Preparation for "), t_strMethodName);
    VectorCustomDialogs::ShowStatusDialog(l_strLastMessage);
    VectorCustomDialogs::SetStatusText(Translate("Run Preparation..."));
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    VectorCustomDialogs::SetStatusText(Translate("Initializing Liquid Waste Sensor..."));
    if(0){
      NGSSTARPREP::LiquidWasteSensor_Init(1);
    }
    VectorCustomDialogs::SetStatusText(Translate("Initializing CPAC chiller..."));
    NGSSTARPREP::CPAC_Init();
    NGSSTARPREP::CPAC_SetTemperature(8);
    VectorCustomDialogs::SetStatusText(Translate("Initializing Hamilton Heater Shakers (HHSs)..."));
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::HHS_Init(t_intHHS3_HSP3_MIDI3, t_intHHS2_HSP2, t_intHHS1_HSP1, t_intHHS4_MIDI1, t_intHHS5_MIDI2, Translate("TCC"), Translate("0"), Translate("0"), Translate("0"), Translate("0"), ML_STAR);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS3_HSP3_MIDI3, 0);
    }
    else
    {
      NGSSTARPREP::HHS_Init(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2, Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), ML_STAR);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS1_HSP1, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS2_HSP2, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS3_HSP3_MIDI3, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS4_MIDI1, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS5_MIDI2, 0);
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      VectorCustomDialogs::SetStatusText(Translate("Initializing ODTC..."));
      NGSSTARPREP::ODTC_Init(t_strDeviceAddressODTC, t_intDeviceNumberODTC, t_strLocalIPAddressOfComputer);
    }
    if (t_blnDisplaySwitchSettingsDialog == ASWGLOBAL::BOOL::TRUE)
    {
      l_strLastMessage = StrConcat8(Translate("The settings of the main boolean switches are as follows (0 = FALSE ; 1 = TRUE):"), Translate("\n\n\n---------"), t_blnPostponedPrimerLoading, Translate("     t_blnPostponedPrimerLoading\n---------"), t_blnSkipLoadingRoutine, Translate("     t_blnSkipLoadingRoutine\n---------"), t_blnSkipLoadingDialogs, Translate("     t_blnSkipLoadingDialogs\n---------"));
      l_strLastMessage = StrConcat8(l_strLastMessage, t_blnDeactivatePipettingStepsForTransportTests, Translate("     t_blnDeactivatePipettingStepsForTransportTests\n---------"), t_blnTestODTCWithShortDummyProtocol, Translate("     t_blnTestODTCWithShortDummyProtocol\n---------"), t_blnSkipInkubationTimes, Translate("     t_blnSkipInkubationTimes"), Translate("\n\nPlease ensure that these settings meet your requirements before continuing the run.\n\nIf the settings are correct select ' OK ', otherwise select ' CANCEL ' to abort the run.\n\n"));
      l_int_OptionSelected = VectorCustomDialogs::MessageDialog(Translate("User confirmation of boolean switches"), 2, 1, 0, 0, 0, l_strLastMessage);
      if (l_int_OptionSelected == 2)
      {
        abort;
      }
    }
    l_strLastMessage = StrConcat12(Translate("Dear Application specialist, Dear user,\n\n"), Translate("The current method is programmed to allow the preparation of sequencing ready libraries for Illumina sequencers.\n\n"), Translate("The method, however, enables the user to select two different workflows for Cleanup3, the Illumina-style and the IonTorrent-style routine.\n\n"), Translate("This change was requested by Qiagen after manual performance of the Illumina-style Cleanup3, as published in the Handbook used for this method did result in poor fragment size distribution.\n\n"), Translate("Please be aware that execution of the IonTorrent-style cleanup will require additional user interaction with the instrument if high number of samples (>72) are processed.\n\n"), Translate("Please be aware that the current method is only biologically tested using the IonTorrent-style cleanup.\n\n"), Translate("Performance of the Illumina-style cleanup might need additional optimization of the method."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Trace (l_strLastMessage);
    NGSSTARLOADING::Display_Message_Dialog(l_strLastMessage);
    t_strEmailAdress = Translate("");
    if(0){
      l_strLastMessage = StrConcat4(Translate("This method is prepared to send emails with MailAlert.exe. \n"), Translate("Install MailAlert v1.08 into following folder : \n"), Translate("\nC:\Program Files (x86)\HAMILTON\NGSStar\MailAlert\n"), Translate(""));
      NGSSTARLOADING::Display_Message_Dialog(l_strLastMessage);
    }
    NGSSTARLOADING::Display_SelectEmailAddress_Dialog(t_strEmailAdress);
    l_intLengthEmailAddress = StrGetLength(t_strEmailAdress);
    if (l_intLengthEmailAddress > 0)
    {
      t_blnSendEmails = ASWGLOBAL::BOOL::TRUE;
      {
        object mailSettings;
        mailSettings.CreateObject("Hamilton.HxServicesErrorEvent");
        mailSettings.SendAddress = t_strEmailAdress;
        mailSettings.ReleaseObject();
      }
    }
    else
    {
      t_blnSendEmails = ASWGLOBAL::BOOL::FALSE;
      t_strEmailAdressReciever = Translate("system@hamilton.ch");
      {
        object mailSettings;
        mailSettings.CreateObject("Hamilton.HxServicesErrorEvent");
        mailSettings.SendAddress = t_strEmailAdressReciever;
        mailSettings.ReleaseObject();
      }
    }
    NGSSTARPROCESSES::DATA_HandoverSequencesAndDataToSMT(ML_STAR, l_intTransportTool, t_str_KitSupplier, t_str_KitTitle, t_blnDeactivatePipettingStepsForTransportTests, t_blnReduceDeckTo4ChannelSystem, t_strEmailAdress, t_blnActivateLockUnlockOfFrontCover, t_strFullPathReportFile, t_blnUseMPHInsteadOfChannels, l_intPlatformUsed, t_strTipCounterNameTip50, t_strTipCounterNameTip300, t_strTipCounterNameTip1000, l_seqTip50, l_seqTip300, l_seqTip1000);
    NGSSTARLOADING::DATA_HandOverDataToSMT_NGSStarLoading(t_strFullPathReportFile, l_intPlatformUsed, t_str_KitSupplier, t_str_KitTitle, t_blnUseMPHInsteadOfChannels, t_blnActivateLockUnlockOfFrontCover, t_strTipCounterNameTip50, t_strTipCounterNameTip300, t_strTipCounterNameTip1000, l_seqTip50, l_seqTip300, l_seqTip1000, ASWGLOBAL::BOOL::FALSE);
    if (t_blnActivateTestMethod == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Select Test Method Processes..."), ASWGLOBAL::BOOL::TRUE);
      _SelectTestMethodProcesses();
    }
    else
    {
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Select Processes..."), ASWGLOBAL::BOOL::TRUE);
      _SelectProcesses();
    }
    SeqRemoveAll(t_seqMlStarSequenceNotUsed);
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Calculate and Load Consumables..."), ASWGLOBAL::BOOL::TRUE);
    _CalculateAndLoadConsumables();
    NGSSTARPROCESSES::DATA_TrackDataFromLoadingSMT(g_int_TotalNumberOf50Tips, g_int_TotalNumberOf300Tips, g_int_TotalNumberOf1000Tips, t_intNumberOfSamplesFromFile);
    if (t_blnActivateTestMethod == ASWGLOBAL::BOOL::TRUE)
    {
      if (t_blnPlateToPlateTransferCheck == ASWGLOBAL::BOOL::TRUE)
      {
        Process001_PlateToPlateTransferCheck();
      }
      if (t_blnODTCMovementCheck == ASWGLOBAL::BOOL::TRUE)
      {
        Process002_ODTCMovementCheck();
      }
    }
    else
    {
      if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        Process1_FirstStrandcDNASynthesis();
      }
      if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        Process2_SecondStrandSynthesis();
      }
      if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        Process3_EndRepairdATailing();
      }
      if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        Process4_AdapterLigation();
      }
      if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        Process5_SampleCleanup1();
      }
      if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        Process6_SPETargetEnrichment();
      }
      if (t_arrBlnProcessActivation.ElementAt( 7 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        Process7_SampleCleanup2();
      }
      if (t_arrBlnProcessActivation.ElementAt( 8 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        Process8_UniversalPCR();
      }
      if (t_arrBlnProcessActivation.ElementAt( 9 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        Process9_SampleCleanup3();
      }
    }
    VectorCustomDialogs::Initialize();
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate(" ииииииииииииии METHOD COMPLETED ииииииииииииии "), ASWGLOBAL::BOOL::TRUE);
    NGSSTARLOADING::Display_Message_Dialog(Translate("Method completed successfully. Press OK to start unloading and shut down of the instrument."));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to unload all carriers?"), Translate("Yes"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to unload all carriers?"), Translate("No"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to defragment the tip racks?"), Translate("Yes"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to defragment the tip racks?"), Translate("No"));
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(5);
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Park iSWAP..."), ASWGLOBAL::BOOL::TRUE);
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Clean up tip adapter..."), ASWGLOBAL::BOOL::TRUE);
      NGSSTARPROCESSES::PIP_CleanUpTipAdapter(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    }
    NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(5, Translate("Do you want to defragment the tip racks?"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Defragment tip racks..."), ASWGLOBAL::BOOL::TRUE);
      NGSSTARPROCESSES::PIP_DefragmentTipRacks(ML_STAR);
    }
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(5, Translate("Do you want to unload all carriers?"), l_int_OptionSelected);
    Trace("Option selected : ",l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Unloading the deck..."), ASWGLOBAL::BOOL::TRUE);
      MECC::TraceComment(Translate("***** Unload Carriers *****"));
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      else
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
    }
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_1 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_1 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Check and clean up the system..."), ASWGLOBAL::BOOL::TRUE);
    l_strLastMessage = StrConcat8(Translate("Dear user, \n"), Translate(""), Translate("check your system :  \n\n"), Translate(""), Translate("1) Check / empty the tip waste, \n"), Translate("2) Check / empty the liquid waste container, \n"), Translate("3) Remove and store reagents and created plates. \n"), Translate(""));
    NGSSTARLOADING::Display_Message_Dialog(l_strLastMessage);
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Preparing for run shutdown..."), ASWGLOBAL::BOOL::TRUE);
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      l_intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, l_strChannelPatternAbort, 4);
    }
    else
    {
      l_intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, l_strChannelPatternAbort, 8);
    }
    if (l_intResultTipCheck == 1)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Shut down CPAC chiller..."), ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::CPAC_Terminate();
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Shut down Hamilton Heater Shakers (HHSs)..."), ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::HHS_Terminate(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2);
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Shut down ODTC..."), ASWGLOBAL::BOOL::TRUE);
      NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
      NGSSTARPREP::ODTC_Terminate(t_intDeviceNumberODTC, ASWGLOBAL::BOOL::FALSE);
    }
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("Workflow completed"), Translate("All selected processes have been completed successfully. Clean the deck and empty the liquid waste."));
    }
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
    VectorCustomDialogs::Terminate();
    TIP_PRESENT_CHECK_5ML_1ML::_ExitLibrary();
    NGSSTARPREP::_ExitLibrary();
    NGSSTARPROCESSES::_ExitLibrary();
    COLORSCHEMELIBRARY::_ExitLibrary();
    NGSSTARLOADING::_ExitLibrary();
    STACKREDUCER::_ExitLibrary();
    STAR_TIP_TOOLS::_ExitLibrary();
    TOOLS_LIBRARY::_ExitLibrary();
  } }
