private function Process001_PlateToPlateTransferCheck(  ) void ;
private function Process002_ODTCMovementCheck(  ) void ;
private function Process1_FirstStrandcDNASynthesis(  ) void ;
private function Process2_SecondStrandSynthesis(  ) void ;
private function Process3_EndRepairdATailing(  ) void ;
private function Process4_AdapterLigation(  ) void ;
private function Process5_SampleCleanup1(  ) void ;
private function Process6_SPETargetEnrichment(  ) void ;
private function Process7_SampleCleanup2(  ) void ;
private function Process8_UniversalPCR(  ) void ;
private function Process9_SampleCleanup3(  ) void ;
private function ProcessX_StoreHSPWithinODTCOverNight( sequence & i_trpHSP, variable i_blnIncubateODTCWithoutActiveCooling ) void ;
private function _CalculateAndLoadConsumables(  ) void ;
private function _SelectProcesses(  ) void ;
private function _SelectTestMethodProcesses(  ) void ;
private function _VersionHistory(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private variable l_strChannelPatternAbort;
  private variable l_intResultTipCheck;
  private variable l_retValueDialog;
  private variable l_strLastMessage;
  private variable l_int_OptionSelected;
  MECC::TraceComment(Translate("==================================================\n\n\nON ABORT STARTS TO SHUT DOWN DEVICES\n\n\n=================================================="));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨METHOD ABORTED¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨"), ASWGLOBAL::BOOL::TRUE);
  if(0){
    l_strLastMessage = StrConcat8(Translate("Dear user, \n"), Translate(""), Translate("check your system :  \n\n"), Translate(""), Translate("1) Check / empty the tip waste, \n"), Translate("2) Check / empty the liquid waste container, \n"), Translate("3) Remove and store reagents and created plates. \n"), Translate(""));
    NGSSTARLOADING::Display_Message_Dialog(l_strLastMessage);
  }
  l_retValueDialog = VectorCustomDialogs::ListDialog(Translate("Method aborted."), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 60, Translate(""), Translate("Press OK to terminate all active devices and close the method."), l_arrEndDialogListInformation);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Preparing for run shutdown..."), ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  l_intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, l_strChannelPatternAbort, 8);
  if (l_intResultTipCheck == 1)
  {
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Shut down CPAC chiller..."), ASWGLOBAL::BOOL::TRUE);
  NGSSTARPREP::CPAC_Terminate();
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Shut down Hamilton Heater Shakers (HHSs)..."), ASWGLOBAL::BOOL::TRUE);
  NGSSTARPREP::HHS_Terminate(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Shut down ODTC..."), ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_Terminate(t_intDeviceNumberODTC, ASWGLOBAL::BOOL::TRUE);
  }
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to cleanup the tip Adapter"), Translate("Yes"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to cleanup the tip Adapter"), Translate("No"));
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(5);
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(5, Translate("Do you want to cleanup the tip Adapter"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Eject tips on MPH..."), ASWGLOBAL::BOOL::TRUE);
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Clean up tip adapter..."), ASWGLOBAL::BOOL::TRUE);
      NGSSTARPROCESSES::PIP_CleanUpTipAdapter(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    }
  }
  NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  else
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }
  if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_SendEmail(Translate("Method aborted"), Translate("Read report file and logfile. Clean the deck and empty the liquid waste."));
  }
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  VectorCustomDialogs::Terminate();
}

private function _VersionHistory(  ) void {
}

private function _CalculateAndLoadConsumables(  ) void {
  private variable l_intNumberOf50uLTips;
  private variable l_intNumberOfMIDIPlates;
  private variable l_intNumberOf1000uLTips;
  private variable l_intNumberOf300uLTips;
  private variable l_intNumberOfHSPPlates;
  private variable l_intNumberOfHamiltonComfortLids;
  private variable l_blnInputplateAlreadyLoaded;
  private variable l_blnHamiltonComfortLidAlreadyLoaded;
  private sequence l_arr_seqReagentsOn50mlContainers[];
  private variable l_bln_CarrierLoadable;
  private variable l_arr_fltReagentVolumesOn50mlContainerEthanol80[];
  private variable l_arr_strReagentNamesOn50mlContainers[];
  private variable l_arr_fltReagentVolumesOn50mlContainers[];
  private variable l_str_FunctionName;
  private variable l_arr_fltReagentVolumesOn50mlContainerQIAseqBeads[];
  private variable l_arr_fltReagentVolumesOn50mlContainerWater[];
  private variable l_intCounterListOfPanelIDs;
  private variable l_strIndexSet;
  private variable l_intNumberOfBatches;
  private variable l_intRemainder;
  private variable l_intNumberOfSamplesPerBatch;
  private variable l_blnTipAdapterAlreadyLoaded;
  private variable l_strLastMessage;
  private variable l_fltVolumeP01_FSSynthesisRPPrimerII;
  private variable l_intNumberOfERATMixTubes;
  private variable l_intNumberOfLigationMixTubes;
  private variable l_strCurrentTaqPolymerase;
  private variable l_strCurrentPCRBuffer;
  private variable l_strCurrentPanel;
  private variable l_strPanelID;
  private variable l_strCurrentForwardPrimer;
  private variable l_strSPEMasterMix;
  private sequence t_seqAspirate_RPPrimerII_distinct;
  private variable l_arr_fltReagentVolumesOnVialCarrier_SecondStrandMix[];
  private variable l_arr_fltReagentVolumesOnVialCarrier_FirstStrandMix[];
  private variable l_arr_fltReagentVolumesOnVialCarrier_RPPrimerII[];
  private variable l_arr_fltReagentVolumesOnVialCarrier_UPCMix[];
  private variable l_arr_fltReagentVolumesOnVialCarrier_ERATMix[];
  private variable l_arr_fltReagentVolumesOnVialCarrier_LigationMix[];
  private variable l_arr_fltReagentVolumesOnAdapterTubeCarrier_FusionXPPanel[];
  private sequence t_seqAspirate_DilutedFastSelect_distinct;
  private variable l_arr_fltReagentVolumesOnVialCarrier_DilutedFastSelect[];
  private variable l_intPositionInPanelIDArray;
  private variable l_fltVolumeReagentMixingVolumeCurrentPanel;
  private variable l_strSubImageName;
  private variable l_intCounterNumberOfPanels;
  private variable l_strLabwareIDPanels;
  private variable l_strCounterNumberPanels;
  l_str_FunctionName = Translate("");
  l_str_FunctionName = GetFunctionName();
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_str_FunctionName, ASWGLOBAL::BOOL::TRUE);
  l_blnTipAdapterAlreadyLoaded = ASWGLOBAL::BOOL::FALSE;
  l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::FALSE;
  l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::FALSE;
  if (t_intNumberOfSamplesFromFile <= 24)
  {
    l_intNumberOfLigationMixTubes = 1;
    l_intNumberOfERATMixTubes = 1;
  }
  else
  {
    if (t_intNumberOfSamplesFromFile <= 48)
    {
      l_intNumberOfERATMixTubes = 1;
      l_intNumberOfLigationMixTubes = 2;
    }
    else
    {
      l_intNumberOfERATMixTubes = 2;
      l_intNumberOfLigationMixTubes = 4;
    }
  }
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    l_intNumberOfBatches = 1;
  }
  else
  {
    l_intNumberOfSamplesPerBatch = t_intColumnsToProcessPerBatch * 8;
    l_intNumberOfBatches = t_intNumberOfSamplesFromFile / l_intNumberOfSamplesPerBatch;
    l_intRemainder = t_intNumberOfSamplesFromFile % l_intNumberOfSamplesPerBatch;
    if (l_intRemainder > 0)
    {
      l_intNumberOfBatches = l_intNumberOfBatches + 1;
    }
  }
  if (t_blnActivateTestMethod == ASWGLOBAL::BOOL::TRUE)
  {
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess 001: Plate to Plate Transfer Check\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
    if (t_blnPlateToPlateTransferCheck == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfMIDIPlates = 0;
      l_intNumberOfHSPPlates = 0;
      l_intNumberOfHamiltonComfortLids = 0;
      l_intNumberOf1000uLTips = 0;
      if (t_blnUse300ulTips == ASWGLOBAL::BOOL::TRUE)
      {
        l_intNumberOf300uLTips = 1 * t_intNumberOfSamplesFromFile;
      }
      if (t_blnUse50ulTips == ASWGLOBAL::BOOL::TRUE)
      {
        l_intNumberOf50uLTips = 1 * t_intNumberOfSamplesFromFile;
      }
      t_intRequiredNumberOf1000uLTipsM0 = l_intNumberOf1000uLTips;
      t_intRequiredNumberOf300uLTipsM0 = l_intNumberOf300uLTips;
      t_intRequiredNumberOf50uLTipsM0 = l_intNumberOf50uLTips;
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      else
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      if (l_blnTipAdapterAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
        {
          NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIPAdapter, Translate("MPH Tip Support"), 1, ML_STAR.TipSupport_0001, 0);
          l_blnTipAdapterAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
        }
      }
      l_strLastMessage = StrConcat4(t_flt_VolumePlateToPlateTransferCheck, Translate(" µl water"), Translate(""), Translate(""));
      if (t_intSelectedIndexAspirationPosition == 1)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, l_strLastMessage, 1, ML_STAR.MIDI_OnMagnet, 0);
      }
      if (t_intSelectedIndexAspirationPosition == 2)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, l_strLastMessage, 1, ML_STAR.MIDI_Pipette, 0);
      }
      if (t_intSelectedIndexAspirationPosition == 3)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, l_strLastMessage, 1, ML_STAR.HSP_OnMagnet, 0);
      }
      if (t_intSelectedIndexAspirationPosition == 4)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, l_strLastMessage, 1, ML_STAR.HSP_Pipette, 0);
      }
      if (t_intSelectedIndexAspirationPosition == 5)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, l_strLastMessage, 1, ML_STAR.HSP_Pipette2, 0);
      }
      if (t_intSelectedIndexDispensePosition == 1)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, Translate("empty"), 1, ML_STAR.MIDI_OnMagnet, 0);
      }
      if (t_intSelectedIndexDispensePosition == 2)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, Translate("empty"), 1, ML_STAR.MIDI_Pipette, 0);
      }
      if (t_intSelectedIndexDispensePosition == 3)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("empty"), 1, ML_STAR.HSP_OnMagnet, 0);
      }
      if (t_intSelectedIndexDispensePosition == 4)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("empty"), 1, ML_STAR.HSP_Pipette, 0);
      }
      if (t_intSelectedIndexDispensePosition == 5)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("empty"), 1, ML_STAR.HSP_Pipette2, 0);
      }
    }
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess 002: ODTC Movement Check\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
    if (t_blnODTCMovementCheck == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfMIDIPlates = 0;
      l_intNumberOfHSPPlates = 0;
      l_intNumberOfHamiltonComfortLids = 1;
      l_intNumberOf1000uLTips = 0;
      l_intNumberOf300uLTips = 0;
      l_intNumberOf50uLTips = 0;
      t_intRequiredNumberOf1000uLTipsM0 = l_intNumberOf1000uLTips;
      t_intRequiredNumberOf300uLTipsM0 = l_intNumberOf300uLTips;
      t_intRequiredNumberOf50uLTipsM0 = l_intNumberOf50uLTips;
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      else
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      if (t_intUsedTransportSequence == 1)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("HSP plate"), 1, ML_STAR.HSP_Pipette, 0);
      }
      else
      {
        if (t_intUsedTransportSequence == 2)
        {
          NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("HSP plate"), 1, ML_STAR.HSP_Pipette2, 0);
        }
        else
        {
          if (t_intUsedTransportSequence == 3)
          {
            NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("HSP plate"), 1, ML_STAR.HSP_OnMagnet, 0);
          }
        }
      }
    }
  }
  else
  {
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess 1: First Strand cDNA Synthesis\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      if (t_blnFastSelectDepletion == ASWGLOBAL::BOOL::TRUE)
      {
        if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
        {
          t_fltVolumeP01_RPPrimerIIAndFastSelect = NGSSTARLOADING::Define_VolumePerWell(Translate("RP Primer II + Diluted FastSelect"), 2);
          NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("RP Primer II + Diluted FastSelect"), Translate("RP Primer II"), 1);
          NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("RP Primer II + Diluted FastSelect"), Translate("Diluted FastSelect"), 1);
        }
        else
        {
          t_fltVolumeP01_FastSelect = NGSSTARLOADING::Define_VolumePerWell(Translate("Diluted FastSelect"), 1);
          t_fltVolumeP01_FastSelectReactionMixing = 0.8 * 5;
          t_fltVolumeP01_FSSynthesisRPPrimerIIMix = 6 * 0.8;
          t_fltVolumeP01_RPPrimerII = NGSSTARLOADING::Define_VolumePerWell(Translate("RP Primer II"), 1);
        }
      }
      else
      {
        l_fltVolumeP01_FSSynthesisRPPrimerII = 1;
        t_fltVolumeP01_FSSynthesisRPPrimerIIMix = 6 * 0.8;
        t_fltVolumeP01_RPPrimerII = NGSSTARLOADING::Define_VolumePerWell(Translate("RP Primer II"), l_fltVolumeP01_FSSynthesisRPPrimerII);
      }
      t_fltVolumeP01_FSSynthesisRTMix = NGSSTARLOADING::Define_VolumePerWell(Translate("First Strand Synthesis Mix"), 4);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("First Strand Synthesis Mix"), Translate("5x BC3 Buffer"), 2);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("First Strand Synthesis Mix"), Translate("RNase Inhibitor"), 1);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("First Strand Synthesis Mix"), Translate("EZ Reverse Transcriptase"), 1);
      t_fltVolumeP01_FSSynthesisRTReactionMixing = 10 * 0.8;
      l_intNumberOfMIDIPlates = 0;
      l_intNumberOfHSPPlates = 0;
      if (l_blnHamiltonComfortLidAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        l_intNumberOfHamiltonComfortLids = 1;
        l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        l_intNumberOfHamiltonComfortLids = 0;
      }
      l_intNumberOf1000uLTips = 0;
      l_intNumberOf300uLTips = 1;
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_intNumberOf50uLTips = 2 * t_intNumberOfSamplesFromFile;
      }
      else
      {
        if (t_blnFastSelectDepletion == ASWGLOBAL::BOOL::TRUE)
        {
          l_intNumberOf50uLTips = 3 * t_intNumberOfSamplesFromFile;
        }
        else
        {
          l_intNumberOf50uLTips = 2 * t_intNumberOfSamplesFromFile;
        }
      }
      t_intRequiredNumberOf1000uLTipsM1 = l_intNumberOf1000uLTips;
      t_intRequiredNumberOf300uLTipsM1 = l_intNumberOf300uLTips;
      t_intRequiredNumberOf50uLTipsM1 = l_intNumberOf50uLTips;
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      else
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      if (l_blnTipAdapterAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
        {
          NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIPAdapter, Translate("MPH Tip Support"), 1, ML_STAR.TipSupport_0001, 0);
          l_blnTipAdapterAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        if (t_blnFastSelectDepletion == ASWGLOBAL::BOOL::TRUE)
        {
        }
        else
        {
        }
        l_strLastMessage = StrConcat4(Translate("RNA Input Plate ("), t_fltVolumeSampleInput, Translate(" µl; 50-250 ng)"), Translate(""));
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, l_strLastMessage, 1, ML_STAR.HSP_Pipette2, 0);
        l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
      }
    }
    MECC::TraceComment(Translate("---------------------------------------------------------------------------\nProcess 2: Second-strand synthesis\n---------------------------------------------------------------------------"));
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      t_fltVolumeP02_SecondStrandSynthMix = NGSSTARLOADING::Define_VolumePerWell(Translate("Second Strand Synthesis Mix"), 10);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Second Strand Synthesis Mix"), Translate("Nuclease-free water (Second Strand Mix)"), 5);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Second Strand Synthesis Mix"), Translate("BLU buffer"), 2);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Second Strand Synthesis Mix"), Translate("RH RNase"), 1);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Second Strand Synthesis Mix"), Translate("dNTP II"), 1);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Second Strand Synthesis Mix"), Translate("POL enzyme"), 1);
      t_fltVolumeP02_ReactionMixing = 20 * 0.8;
      l_intNumberOfMIDIPlates = 0;
      l_intNumberOfHSPPlates = 0;
      if (l_blnHamiltonComfortLidAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        l_intNumberOfHamiltonComfortLids = 1;
        l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        l_intNumberOfHamiltonComfortLids = 0;
      }
      l_intNumberOf1000uLTips = 1;
      l_intNumberOf300uLTips = 0;
      l_intNumberOf50uLTips = 1 * t_intNumberOfSamplesFromFile;
      t_intRequiredNumberOf1000uLTipsM2 = l_intNumberOf1000uLTips;
      t_intRequiredNumberOf300uLTipsM2 = l_intNumberOf300uLTips;
      t_intRequiredNumberOf50uLTipsM2 = l_intNumberOf50uLTips;
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      else
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      if (l_blnTipAdapterAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
        {
          NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIPAdapter, Translate("MPH Tip Support"), 1, ML_STAR.TipSupport_0001, 0);
          l_blnTipAdapterAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("First Strand Synthesis Plate (10 µL)"), 1, ML_STAR.HSP_Pipette2, 0);
        l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
      }
    }
    MECC::TraceComment(Translate("---------------------------------------------------------------------------\nProcess 3: End repair / dA tailing\n---------------------------------------------------------------------------"));
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      t_fltVolumeP03_ERATMix = NGSSTARLOADING::Define_VolumePerWell(Translate("End-Repair / dA Tailing Mix"), 30);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("End-Repair / dA Tailing Mix"), Translate("Nuclease-free Water (ERAT)"), 15);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("End-Repair / dA Tailing Mix"), Translate("10x ERA Buffer"), 5);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("End-Repair / dA Tailing Mix"), Translate("5x ERA Enzyme"), 10);
      t_fltVolumeP03_ERATReactionMixing = 50 * 0.8;
      l_intNumberOfMIDIPlates = 0;
      l_intNumberOfHSPPlates = 0;
      if (l_blnHamiltonComfortLidAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        l_intNumberOfHamiltonComfortLids = 1;
        l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        l_intNumberOfHamiltonComfortLids = 0;
      }
      l_intNumberOf1000uLTips = l_intNumberOfERATMixTubes;
      l_intNumberOf300uLTips = 0;
      l_intNumberOf50uLTips = 1 * t_intNumberOfSamplesFromFile;
      t_intRequiredNumberOf1000uLTipsM3 = l_intNumberOf1000uLTips;
      t_intRequiredNumberOf300uLTipsM3 = l_intNumberOf300uLTips;
      t_intRequiredNumberOf50uLTipsM3 = l_intNumberOf50uLTips;
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      else
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      if (l_blnTipAdapterAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
        {
          NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIPAdapter, Translate("MPH Tip Support"), 1, ML_STAR.TipSupport_0001, 0);
          l_blnTipAdapterAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Second Strand Synthesis Plate (~20 µl)"), 1, ML_STAR.HSP_Pipette2, 0);
        l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
      }
    }
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess 4: Adapter Ligation\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      t_fltVolumeP04_AdapterLigationMix = NGSSTARLOADING::Define_VolumePerWell(Translate("Ligation Mix"), 45);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Ligation Mix"), Translate("Nuclease-free Water (Ligation Mix)"), 15);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Ligation Mix"), Translate("5x Ligation Buffer"), 20);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Ligation Mix"), Translate("DNA Ligase"), 10);
      t_fltVolumeP04_i7Adapter = NGSSTARLOADING::Define_VolumePerWell(Translate("i7 Adapter"), 5);
      t_fltVolumeP04_LigationReactionMixing = 100 * 0.8;
      l_intNumberOfMIDIPlates = 0;
      l_intNumberOfHSPPlates = 0;
      if (l_blnHamiltonComfortLidAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        l_intNumberOfHamiltonComfortLids = 1;
        l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        l_intNumberOfHamiltonComfortLids = 0;
      }
      l_intNumberOf1000uLTips = l_intNumberOfLigationMixTubes;
      l_intNumberOf300uLTips = 1 * t_intNumberOfSamplesFromFile;
      l_intNumberOf50uLTips = 1 * t_intNumberOfSamplesFromFile;
      t_intRequiredNumberOf1000uLTipsM4 = l_intNumberOf1000uLTips;
      t_intRequiredNumberOf300uLTipsM4 = l_intNumberOf300uLTips;
      t_intRequiredNumberOf50uLTipsM4 = l_intNumberOf50uLTips;
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      else
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      if (l_blnTipAdapterAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
        {
          NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIPAdapter, Translate("MPH Tip Support"), 1, ML_STAR.TipSupport_0001, 0);
          l_blnTipAdapterAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("End Repair / dA Tailing Plate (~50 µl)"), 1, ML_STAR.HSP_Pipette2, 0);
        l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
      }
      if (t_blnPostponedAdapterLoading == ASWGLOBAL::BOOL::TRUE)
      {
      }
      else
      {
        l_strIndexSet=t_arrListOfIndexSets.GetAt(1-1);
        l_strLastMessage = StrConcat4(Translate("QIAseq 96-UDI Adapter Plate "), l_strIndexSet, Translate(" (>5 µl)"), Translate(""));
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, l_strLastMessage, 1, ML_STAR.HHS1_HSP, 0);
        if (t_intOneOrTwoIndexSets == 2)
        {
          l_strIndexSet=t_arrListOfIndexSets.GetAt(2-1);
          l_strLastMessage = StrConcat4(Translate("QIAseq 96-UDI Adapter Plate "), l_strIndexSet, Translate(" (>5 µl)"), Translate(""));
          NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, l_strLastMessage, 1, ML_STAR.HHS2_HSP, 0);
        }
      }
    }
    MECC::TraceComment(Translate("-------------------------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess 5: Sample CleanUp 1\n-------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      t_fltVolumeP05_ReactionProduct = 100;
      t_fltVolumeP05_QIAseqBeads1 = NGSSTARLOADING::Define_VolumePerWell(Translate("QIAseq Beads"), 80);
      t_fltVolumeP05_FirstSupernatant1 = t_fltVolumeP05_ReactionProduct + t_fltVolumeP05_QIAseqBeads1;
      t_fltVolumeP05_Ethanol = 200;
      NGSSTARLOADING::Define_VolumePerWell(Translate("80% Ethanol"), 400);
      t_fltVolumeP05_NucleaseFreeWater_FirstElution = NGSSTARLOADING::Define_VolumePerWell(Translate("Nuclease-Free water"), 50);
      t_fltVolumeP05_QIAseqBeads2 = NGSSTARLOADING::Define_VolumePerWell(Translate("QIAseq Beads"), 55);
      t_fltVolumeP05_FirstSupernatant2 = t_fltVolumeP05_NucleaseFreeWater_FirstElution + t_fltVolumeP05_QIAseqBeads2;
      NGSSTARLOADING::Define_VolumePerWell(Translate("80% Ethanol"), 400);
      t_fltVolumeP05_NucleaseFreeWater_SecondElution = NGSSTARLOADING::Define_VolumePerWell(Translate("Nuclease-Free water"), 12.4);
      t_fltVolumeP05_2ndEluat = 10.4;
      l_intNumberOfMIDIPlates = 1;
      l_intNumberOfHSPPlates = 1;
      if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
      {
        if (l_blnHamiltonComfortLidAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
        {
          l_intNumberOfHamiltonComfortLids = 1;
          l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          l_intNumberOfHamiltonComfortLids = 0;
        }
      }
      l_intNumberOf1000uLTips = 32 * l_intNumberOfBatches;
      if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
      {
        l_intNumberOf1000uLTips = l_intNumberOf1000uLTips + 8;
      }
      else
      {
        l_intNumberOf1000uLTips = l_intNumberOf1000uLTips + 16;
      }
      l_intNumberOf300uLTips = 8 * t_intNumberOfSamplesFromFile;
      l_intNumberOf50uLTips = 3 * t_intNumberOfSamplesFromFile;
      t_intRequiredNumberOf1000uLTipsM5 = l_intNumberOf1000uLTips;
      t_intRequiredNumberOf300uLTipsM5 = l_intNumberOf300uLTips;
      t_intRequiredNumberOf50uLTipsM5 = l_intNumberOf50uLTips;
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      else
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      if (l_blnTipAdapterAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
        {
          NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIPAdapter, Translate("MPH Tip Support"), 1, ML_STAR.TipSupport_0001, 0);
          l_blnTipAdapterAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Ligation Reaction Plate (~100 µl)"), 1, ML_STAR.HSP_Pipette2, 0);
        l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
      }
    }
    MECC::TraceComment(Translate("-------------------------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess 6: SPE target enrichment\n-------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      {
        for(l_intCounterListOfPanelIDs = 0; l_intCounterListOfPanelIDs < t_intNumberOfPanels;)
        {
          l_intCounterListOfPanelIDs = l_intCounterListOfPanelIDs + 1;
          MECC::TraceComment(Translate("+-+-+-+-+-+ Devine Volumes P6 +-+-+-+-+-+"));
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("+-+-+-+-+- l_intCounterListOfPanelIDs:   "), l_intCounterListOfPanelIDs);
          TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("+-+-+-+- t_arrPanelID"), t_arrPanelID);
          TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("+-+-+-+- t_arrListOfPanelIDs"), t_arrListOfPanelIDs);
          l_strPanelID=t_arrListOfPanelIDs.GetAt(l_intCounterListOfPanelIDs-1);
          l_strSPEMasterMix = StrConcat4(Translate("SPE Reaction Mix ("), l_strPanelID, Translate(")"), Translate(""));
          l_strCurrentPanel = StrConcat4(l_strPanelID, Translate(" (QIAseq RNA Fusion XP Panel)"), Translate(""), Translate(""));
          l_strCurrentPCRBuffer = StrConcat4(Translate("5x TE PCR Buffer ("), l_strPanelID, Translate(")"), Translate(""));
          l_strCurrentForwardPrimer = StrConcat4(Translate("IL-Forward Primer ("), l_strPanelID, Translate(")"), Translate(""));
          l_strCurrentTaqPolymerase = StrConcat4(Translate("HotStar Taq Polymerase ("), l_strPanelID, Translate(")"), Translate(""));
          TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, Translate("+-+-+-+-+ l_strPanelID:   "), l_strPanelID, Translate("\n+-+-+-+-+ l_strSPEMasterMix:   "), l_strSPEMasterMix, Translate("\n+-+-+-+-+ l_strCurrentPanel:   "), l_strCurrentPanel, Translate("\n+-+-+-+-+ l_strCurrentPCRBuffer:   "), l_strCurrentPCRBuffer, Translate("\n+-+-+-+-+ l_strCurrentForwardPrimer:   "), l_strCurrentForwardPrimer);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("\n+-+-+-+-+ l_strCurrentTaqPolymerase:   "), l_strCurrentTaqPolymerase);
          NGSSTARLOADING::Define_VolumePerWell(l_strSPEMasterMix, 9.6);
          NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(l_strSPEMasterMix, l_strCurrentPCRBuffer, 4);
          NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(l_strSPEMasterMix, l_strCurrentPanel, 4);
          NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(l_strSPEMasterMix, l_strCurrentForwardPrimer, 0.8);
          NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(l_strSPEMasterMix, l_strCurrentTaqPolymerase, 0.8);
        }
      }
      t_fltVolumeP06_SPEReactionMix = 9.6;
      t_fltVolumeP06_SPEReactionMixing = 20 * 0.8;
      l_intNumberOfMIDIPlates = 0;
      l_intNumberOfHSPPlates = 0;
      if (l_blnHamiltonComfortLidAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        l_intNumberOfHamiltonComfortLids = 1;
        l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        l_intNumberOfHamiltonComfortLids = 0;
      }
      l_intNumberOf1000uLTips = 0;
      l_intNumberOf300uLTips = 0;
      l_intNumberOf50uLTips = 1 * t_intNumberOfSamplesFromFile;
      t_intRequiredNumberOf1000uLTipsM6 = l_intNumberOf1000uLTips;
      t_intRequiredNumberOf300uLTipsM6 = l_intNumberOf300uLTips;
      t_intRequiredNumberOf50uLTipsM6 = l_intNumberOf50uLTips;
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      else
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      if (l_blnTipAdapterAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
        {
          NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIPAdapter, Translate("MPH Tip Support"), 1, ML_STAR.TipSupport_0001, 0);
          l_blnTipAdapterAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Purified Ligation Plate (~10.4 µl)"), 1, ML_STAR.HSP_Pipette2, 0);
        l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
      }
    }
    MECC::TraceComment(Translate("-------------------------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess 7: Sample CleanUp 2\n-------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    if (t_arrBlnProcessActivation.ElementAt( 7 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      t_fltVolumeP07_FirstSupernatant = 0;
      t_fltVolumeP07_SPEReaction = 20;
      t_fltVolumeP07_NucleaseFreeWater = NGSSTARLOADING::Define_VolumePerWell(Translate("Nuclease-Free water"), 30);
      if (t_blnReduceBeadVolume == ASWGLOBAL::BOOL::TRUE)
      {
        t_fltVolumeP07_QIAseqBeads = NGSSTARLOADING::Define_VolumePerWell(Translate("QIAseq Beads"), 45);
      }
      else
      {
        t_fltVolumeP07_QIAseqBeads = NGSSTARLOADING::Define_VolumePerWell(Translate("QIAseq Beads"), 55);
      }
      t_fltVolumeP07_FirstSupernatant = t_fltVolumeP07_SPEReaction + t_fltVolumeP07_NucleaseFreeWater + t_fltVolumeP07_QIAseqBeads;
      t_fltVolumeP07_Ethanol = 200;
      NGSSTARLOADING::Define_VolumePerWell(Translate("80% Ethanol"), 400);
      t_fltVolumeP07_WaterForElution = NGSSTARLOADING::Define_VolumePerWell(Translate("Nuclease-Free water"), 15.4);
      t_fltVolumeP07_Eluat = 13.4;
      l_intNumberOfMIDIPlates = 1;
      l_intNumberOfHSPPlates = 0;
      l_intNumberOfHamiltonComfortLids = 0;
      l_intNumberOf1000uLTips = 16 * l_intNumberOfBatches;
      l_intNumberOf1000uLTips = l_intNumberOf1000uLTips + 8;
      l_intNumberOf300uLTips = 4 * t_intNumberOfSamplesFromFile;
      l_intNumberOf50uLTips = 3 * t_intNumberOfSamplesFromFile;
      t_intRequiredNumberOf1000uLTipsM7 = l_intNumberOf1000uLTips;
      t_intRequiredNumberOf300uLTipsM7 = l_intNumberOf300uLTips;
      t_intRequiredNumberOf50uLTipsM7 = l_intNumberOf50uLTips;
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      else
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      if (l_blnTipAdapterAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
        {
          NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIPAdapter, Translate("MPH Tip Support"), 1, ML_STAR.TipSupport_0001, 0);
          l_blnTipAdapterAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("SPE Plate (~20 µl)"), 1, ML_STAR.HSP_Pipette2, 0);
        l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
      }
      if(0){
        if (t_blnPostponedPrimerLoading == ASWGLOBAL::BOOL::TRUE)
        {
        }
        else
        {
          l_strIndexSet=t_arrListOfIndexSets.GetAt(1-1);
          l_strLastMessage = StrConcat4(Translate("QIAseq Targeted DNA Pro Index Plate "), l_strIndexSet, Translate(" (>5 µl)"), Translate(""));
          NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, l_strLastMessage, 1, ML_STAR.HHS1_HSP, 0);
          if (t_intOneOrTwoIndexSets == 2)
          {
            l_strIndexSet=t_arrListOfIndexSets.GetAt(2-1);
            l_strLastMessage = StrConcat4(Translate("QIAseq Targeted DNA Pro Index Plate "), l_strIndexSet, Translate(" (>5 µl)"), Translate(""));
            NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, l_strLastMessage, 1, ML_STAR.HHS2_HSP, 0);
          }
        }
      }
    }
    MECC::TraceComment(Translate("-------------------------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess 8: Universal PCR Amplification\n-------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    if (t_arrBlnProcessActivation.ElementAt( 8 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      t_fltVolumeP08_UPCRMix = NGSSTARLOADING::Define_VolumePerWell(Translate("Universal PCR Mix"), 6.6);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Universal PCR Mix"), Translate("5x RNA Buffer II"), 4);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Universal PCR Mix"), Translate("Nuclease-free Water (UPCR)"), 1.8);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Universal PCR Mix"), Translate("TaqIt Plus enzyme"), 0.8);
      t_fltVolumeP08_Eluat = 13.4;
      t_fltVolumeP08_UPCRReaction = 20;
      t_fltVolumeP08_ReactionMixing = t_fltVolumeP08_UPCRReaction * 0.8;
      l_intNumberOfMIDIPlates = 0;
      l_intNumberOfHSPPlates = 1;
      if (l_blnHamiltonComfortLidAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        l_intNumberOfHamiltonComfortLids = 1;
        l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        l_intNumberOfHamiltonComfortLids = 0;
      }
      l_intNumberOf1000uLTips = 0;
      l_intNumberOf300uLTips = 1 * t_intNumberOfSamplesFromFile;
      l_intNumberOf50uLTips = 1 * t_intNumberOfSamplesFromFile;
      t_intRequiredNumberOf1000uLTipsM8 = l_intNumberOf1000uLTips;
      t_intRequiredNumberOf300uLTipsM8 = l_intNumberOf300uLTips;
      t_intRequiredNumberOf50uLTipsM8 = l_intNumberOf50uLTips;
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      else
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      if (l_blnTipAdapterAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
        {
          NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIPAdapter, Translate("MPH Tip Support"), 1, ML_STAR.TipSupport_0001, 0);
          l_blnTipAdapterAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Universal PCR Plate (100 µl)"), 1, ML_STAR.HSP_Pipette2, 0);
        l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
      }
      if (t_blnPostponedPrimerLoading == ASWGLOBAL::BOOL::TRUE)
      {
      }
      else
      {
        l_strIndexSet=t_arrListOfIndexSets.GetAt(1-1);
        l_strLastMessage = StrConcat4(Translate("QIAseq 96-UDI Index Primer Plate "), l_strIndexSet, Translate(""), Translate(""));
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, l_strLastMessage, 1, ML_STAR.HHS1_HSP, 0);
        if (t_intOneOrTwoIndexSets == 2)
        {
          l_strIndexSet=t_arrListOfIndexSets.GetAt(2-1);
          l_strLastMessage = StrConcat4(Translate("QIAseq 96-UDI Index Primer Plate "), l_strIndexSet, Translate(""), Translate(""));
          NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, l_strLastMessage, 1, ML_STAR.HHS2_HSP, 0);
        }
      }
    }
    MECC::TraceComment(Translate("-------------------------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess 9: Sample CleanUp 3\n-------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
    if (t_arrBlnProcessActivation.ElementAt( 9 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      t_fltVolumeP09_FirstSupernatant = 0;
      t_fltVolumeP09_UPCR = 20;
      t_fltVolumeP09_NucleaseFreeWater = NGSSTARLOADING::Define_VolumePerWell(Translate("Nuclease-Free water"), 30);
      if (t_blnReduceBeadVolume == ASWGLOBAL::BOOL::TRUE)
      {
        t_fltVolumeP09_QIAseqBeads = NGSSTARLOADING::Define_VolumePerWell(Translate("QIAseq Beads"), 45);
      }
      else
      {
        t_fltVolumeP09_QIAseqBeads = NGSSTARLOADING::Define_VolumePerWell(Translate("QIAseq Beads"), 55);
      }
      t_fltVolumeP09_FirstSupernatant = t_fltVolumeP09_UPCR + t_fltVolumeP09_NucleaseFreeWater + t_fltVolumeP09_QIAseqBeads;
      t_fltVolumeP09_FirstSupernatantMixing = t_fltVolumeP09_FirstSupernatant * 0.8;
      t_fltVolumeP09_Ethanol = 200;
      NGSSTARLOADING::Define_VolumePerWell(Translate("80% Ethanol"), 400);
      t_fltVolumeP09_WaterForElution = NGSSTARLOADING::Define_VolumePerWell(Translate("Nuclease-Free water"), 25);
      t_fltVolumeP09_Eluat = 21;
      l_intNumberOfMIDIPlates = 1;
      l_intNumberOfHSPPlates = 1;
      l_intNumberOfHamiltonComfortLids = 0;
      l_intNumberOf1000uLTips = 16 * l_intNumberOfBatches;
      l_intNumberOf1000uLTips = l_intNumberOf1000uLTips + 8;
      l_intNumberOf300uLTips = 4 * t_intNumberOfSamplesFromFile;
      l_intNumberOf50uLTips = 3 * t_intNumberOfSamplesFromFile;
      t_intRequiredNumberOf1000uLTipsM9 = l_intNumberOf1000uLTips;
      t_intRequiredNumberOf300uLTipsM9 = l_intNumberOf300uLTips;
      t_intRequiredNumberOf50uLTipsM9 = l_intNumberOf50uLTips;
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess_MOA(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      else
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
      }
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      if (l_blnTipAdapterAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
        {
          NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIPAdapter, Translate("MPH Tip Support"), 1, ML_STAR.TipSupport_0001, 0);
          l_blnTipAdapterAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Universal PCR Plate (20 µl)"), 1, ML_STAR.HSP_Pipette2, 0);
        l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
      }
    }
    if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
    {
      if (l_blnHamiltonComfortLidAlreadyLoaded == ASWGLOBAL::BOOL::TRUE)
      {
        l_intNumberOfHamiltonComfortLids = 0;
      }
      else
      {
        l_intNumberOfHamiltonComfortLids = 1;
      }
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    }
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      if (t_blnFastSelectDepletion == ASWGLOBAL::BOOL::TRUE)
      {
        if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
        {
          NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("RP Primer II + Diluted FastSelect"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 10, 20, ML_STAR.CAR_VIALS_SMALL, 1, 1, t_seqAspirate_RPPrimerII_distinct, t_seqAspirate_RPPrimerII, l_arr_fltReagentVolumesOnVialCarrier_DilutedFastSelect);
        }
        else
        {
          NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Diluted FastSelect"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 10, 20, ML_STAR.CAR_VIALS_SMALL, 11, 1, t_seqAspirate_DilutedFastSelect_distinct, t_seqAspirate_DilutedFastSelect, l_arr_fltReagentVolumesOnVialCarrier_DilutedFastSelect);
          NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("RP Primer II"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_1500uL, 1500, 40, 20, ML_STAR.CAR_VIALS_SMALL, 1, 1, t_seqAspirate_RPPrimerII_distinct, t_seqAspirate_RPPrimerII, l_arr_fltReagentVolumesOnVialCarrier_RPPrimerII);
        }
      }
      else
      {
        NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("RP Primer II"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_1500uL, 1500, 40, 20, ML_STAR.CAR_VIALS_SMALL, 1, 1, t_seqAspirate_RPPrimerII_distinct, t_seqAspirate_RPPrimerII, l_arr_fltReagentVolumesOnVialCarrier_RPPrimerII);
      }
      NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("First Strand Synthesis Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 30, 20, ML_STAR.CAR_VIALS_SMALL, 2, 1, t_seqAspirate_FirstStrandMix_distinct, t_seqAspirate_FirstStrandMix, l_arr_fltReagentVolumesOnVialCarrier_FirstStrandMix);
    }
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Second Strand Synthesis Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 35, 17.5, ML_STAR.CAR_VIALS_SMALL, 3, 1, t_seqAspirate_SecondStrandMix_distinct, t_seqAspirate_SecondStrandMix, l_arr_fltReagentVolumesOnVialCarrier_SecondStrandMix);
      t_fltVolumeP02_SecondStrandMixMixing = 0.8 * l_arr_fltReagentVolumesOnVialCarrier_SecondStrandMix.ElementAt( 1 -1);
    }
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("End-Repair / dA Tailing Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 30, 7.5, ML_STAR.CAR_VIALS_SMALL, 4, l_intNumberOfERATMixTubes, t_seqAspirate_ERATMix_distinct, t_seqAspirate_ERATMix, l_arr_fltReagentVolumesOnVialCarrier_ERATMix);
      TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("+-+-+-+-+ l_arr_fltReagentVolumesOnVialCarrier_ERATMix:   "), l_arr_fltReagentVolumesOnVialCarrier_ERATMix);
      t_fltVolumeP03_ERATMixTubeMixing = 0.8 * l_arr_fltReagentVolumesOnVialCarrier_ERATMix.ElementAt( 1 -1);
    }
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Ligation Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 50, 7.5, ML_STAR.CAR_VIALS_SMALL, 6, l_intNumberOfLigationMixTubes, t_seqAspirate_LigationMix_distinct, t_seqAspirate_LigationMix, l_arr_fltReagentVolumesOnVialCarrier_LigationMix);
      TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("+-+-+-+-+ l_arr_fltReagentVolumesOnVialCarrier_LigationMix:   "), l_arr_fltReagentVolumesOnVialCarrier_LigationMix);
      t_fltVolumeP04_LigationMixTubeMixing = 0.8 * l_arr_fltReagentVolumesOnVialCarrier_LigationMix.ElementAt( 1 -1);
    }
    if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      t_arr_fltReagentMixingVolumesOnAdapterTubeCarrier_FusionXPPanel.SetSize(0);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("+-+-+-+-+- t_intNumberOfPanels:   "), t_intNumberOfPanels);
      {
        for(l_intCounterListOfPanelIDs = 0; l_intCounterListOfPanelIDs < t_intNumberOfPanels;)
        {
          l_intCounterListOfPanelIDs = l_intCounterListOfPanelIDs + 1;
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("+-+-+-+-+- l_intPositionInPanelIDArray:   "), l_intPositionInPanelIDArray);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("+-+-+-+-+- l_intCounterListOfPanelIDs:   "), l_intCounterListOfPanelIDs);
          TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("+-+-+-+- t_arrListOfPanelIDs"), t_arrListOfPanelIDs);
          l_strPanelID=t_arrListOfPanelIDs.GetAt(l_intCounterListOfPanelIDs-1);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("+-+-+-+-+- l_strPanelID:   "), l_strPanelID);
          l_strSPEMasterMix = StrConcat4(Translate("SPE Reaction Mix ("), l_strPanelID, Translate(")"), Translate(""));
          TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("+-+-+-+- t_arrNumberPanelID:   "), t_arrNumberPanelID);
          NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, l_strSPEMasterMix, t_arrNumberPanelID.ElementAt( l_intCounterListOfPanelIDs -1), ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 20, 7.5, ML_STAR.CAR_Adapter_Tubes, 0, 0, t_seqAspirate_QIAseqRNAFusionXPPanel_distinct, t_seqAspirate_QIAseqRNAFusionXPPanel, l_arr_fltReagentVolumesOnAdapterTubeCarrier_FusionXPPanel);
          TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqAspirate_QIAseqRNAFusionXPPanel);
          TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("+-+-+-+- l_arr_fltReagentVolumesOnAdapterTubeCarrier_FusionXPPanel:   "), l_arr_fltReagentVolumesOnAdapterTubeCarrier_FusionXPPanel);
          l_fltVolumeReagentMixingVolumeCurrentPanel=l_arr_fltReagentVolumesOnAdapterTubeCarrier_FusionXPPanel.GetAt(1-1);
          l_fltVolumeReagentMixingVolumeCurrentPanel = 0.8 * l_fltVolumeReagentMixingVolumeCurrentPanel;
          t_arr_fltReagentMixingVolumesOnAdapterTubeCarrier_FusionXPPanel.AddAsLast(l_fltVolumeReagentMixingVolumeCurrentPanel);
        }
      }
      TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("+-+-+-+- t_arr_fltReagentMixingVolumesOnAdapterTubeCarrier_FusionXPPanel:   "), t_arr_fltReagentMixingVolumesOnAdapterTubeCarrier_FusionXPPanel);
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqAspirate_QIAseqRNAFusionXPPanel);
    }
    if (t_arrBlnProcessActivation.ElementAt( 8 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Universal PCR Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 20, 15, ML_STAR.CAR_VIALS_SMALL, 10, 1, t_seqAspirate_UniversalPCRMix_distinct, t_seqAspirate_UniversalPCRMix, l_arr_fltReagentVolumesOnVialCarrier_UPCMix);
      t_fltVolumeP08_UPCRMixMixing = 0.8 * l_arr_fltReagentVolumesOnVialCarrier_UPCMix.ElementAt( 1 -1);
    }
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("QIAseq Beads"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 60000, 2000, 5, ML_STAR.RGT50, 5, 0, t_seqAspirate_QIAseqBeads_distinct, t_seqAspirate_QIAseqBeads, l_arr_fltReagentVolumesOn50mlContainerQIAseqBeads);
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("80% Ethanol"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 60000, 5000, 20, ML_STAR.RGT50, 1, 0, t_seqAspirate_Ethanol80_distinct, t_seqAspirate_Ethanol80, l_arr_fltReagentVolumesOn50mlContainerEthanol80);
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Nuclease-Free water"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 60000, 3000, 5, ML_STAR.RGT50, 10, 0, t_seqAspirate_Water_distinct, t_seqAspirate_Water, l_arr_fltReagentVolumesOn50mlContainerWater);
    NGSSTARLOADING::Display_Mastermix_Dialog();
  }
  MECC::TraceComment(Translate("After all liquids have been defined..the evaluate step calculates the needed resources"));
  NGSSTARLOADING::Evaluate_ResourcesByCarrier();
  NGSSTARLOADING::Retrieve_50mlTrough_ReagentsVolumesAndSequences(l_arr_strReagentNamesOn50mlContainers, l_arr_fltReagentVolumesOn50mlContainers, l_arr_seqReagentsOn50mlContainers);
  if (t_intSelectedIndexAspirationPosition == 1)
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_OnMagnet, t_arr_strCoordinates, t_seqAspirationPosition, 1);
  }
  if (t_intSelectedIndexAspirationPosition == 2)
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arr_strCoordinates, t_seqAspirationPosition, 1);
  }
  if (t_intSelectedIndexAspirationPosition == 3)
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_OnMagnet, t_arr_strCoordinates, t_seqAspirationPosition, 1);
  }
  if (t_intSelectedIndexAspirationPosition == 4)
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arr_strCoordinates, t_seqAspirationPosition, 1);
  }
  if (t_intSelectedIndexAspirationPosition == 5)
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arr_strCoordinates, t_seqAspirationPosition, 1);
  }
  if (t_intSelectedIndexDispensePosition == 1)
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_OnMagnet, t_arr_strCoordinates, t_seqDispensePosition, 1);
  }
  if (t_intSelectedIndexDispensePosition == 2)
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arr_strCoordinates, t_seqDispensePosition, 1);
  }
  if (t_intSelectedIndexDispensePosition == 3)
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_OnMagnet, t_arr_strCoordinates, t_seqDispensePosition, 1);
  }
  if (t_intSelectedIndexDispensePosition == 4)
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arr_strCoordinates, t_seqDispensePosition, 1);
  }
  if (t_intSelectedIndexDispensePosition == 5)
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arr_strCoordinates, t_seqDispensePosition, 1);
  }
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.CAR_Adapter_Tubes, t_arrPanelPositionIDs, t_seqAspirate_QIAseqRNAFusionXPPanelAll, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_OnMagnet, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_OnMagnet, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrIndex1PositionIDs, t_seqHSP_Pipette_IndexPlate, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Pipette, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_Pipette2, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Pipette2, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette3, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_Pipette3, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette3, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Pipette3, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_ODTC, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_ODTC, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_CPAC, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_CPAC, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_CPAC, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_CPAC, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS1_QIAseqIndexAdapterPlate1, t_arrIndex1PositionIDs, t_seqHHS1_HSP_IndexAdapterSet1, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS2_QIAseqIndexAdapterPlate2, t_arrIndex2PositionIDs, t_seqHHS2_HSP_IndexAdapterSet2, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS1_QIAseqIndexPrimerPlate1, t_arrIndex1PositionIDs, t_seqHHS1_HSP_IndexPrimerSet1, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS2_QIAseqIndexPrimerPlate2, t_arrIndex2PositionIDs, t_seqHHS2_HSP_IndexPrimerSet2, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS1_HSP, t_arrAdapterLigationPlatePositionIDs, t_seqHHS1_HSP, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS1_HSP, t_arrAdapterLigationPlatePositionIDs, t_trpHHS1_HSP, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS2_HSP, t_arrAdapterLigationPlatePositionIDs, t_seqHHS2_HSP, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS2_HSP, t_arrAdapterLigationPlatePositionIDs, t_trpHHS2_HSP, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_HSP, t_arrAdapterLigationPlatePositionIDs, t_seqHHS3_HSP, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_HSP, t_arrAdapterLigationPlatePositionIDs, t_trpHHS3_HSP, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Waste, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_StackOut, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_StackOut, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_seqMIDI_OnMagnet, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_OnMagnet, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arrAdapterLigationPlatePositionIDs, t_seqMIDI_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_Pipette, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_CPAC, t_arrAdapterLigationPlatePositionIDs, t_seqMIDI_CPAC, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_CPAC, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_CPAC, 2);
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_seqHHS3_MIDI, 1);
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_trpHHS3_MIDI, 2);
  }
  else
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_seqHHS3_MIDI, 1);
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_trpHHS3_MIDI, 2);
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS4_MIDI, t_arrAdapterLigationPlatePositionIDs, t_seqHHS4_MIDI, 1);
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS4_MIDI, t_arrAdapterLigationPlatePositionIDs, t_trpHHS4_MIDI, 2);
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS5_MIDI, t_arrAdapterLigationPlatePositionIDs, t_seqHHS5_MIDI, 1);
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS5_MIDI, t_arrAdapterLigationPlatePositionIDs, t_trpHHS5_MIDI, 2);
  }
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_Waste, 2);
  {
    for(l_intCounterNumberOfPanels = 0; l_intCounterNumberOfPanels < t_intNumberOfPanels;)
    {
      l_intCounterNumberOfPanels = l_intCounterNumberOfPanels + 1;
      l_strLabwareIDPanels = SeqGetLabwareId(ML_STAR.CAR_Adapter_Tubes);
      l_strCounterNumberPanels = StrIStr(l_intCounterNumberOfPanels);
      SeqAdd(t_seqAspirate_MixSPEPanels, l_strLabwareIDPanels, l_strCounterNumberPanels);
    }
  }
  t_seqAspirate_MixSPEPanels.SetCurrentPosition(1);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqAspirate_MixSPEPanels);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.Ham_ComfortLid_ODTC, t_arrAdapterLigationPlatePositionIDs, t_trpHamiltonComfortLidODTC, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.Ham_ComfortLid_Stack_ParkPos, t_arrAdapterLigationPlatePositionIDs, t_trpHamiltonComfortLidStackParkPos, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.Ham_ComfortLid_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpHamiltonComfortLidWaste, 2);
  MECC::TraceComment(Translate("Setting sequences completed"));
  SeqRemoveAll(t_trp_Stack1);
  SeqRemoveAll(t_trp_Stack4);
  SeqRemoveAll(t_trpHamiltonComfortLidStackParkPos);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfMIDI, ML_STAR.Stack_MIDI, t_trp_Stack1, t_intMaxPlatesPerStackMIDI, ML_STAR);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfHSP, ML_STAR.Stack4, t_trp_Stack4, t_intMaxPlatesPerStackHSP, ML_STAR);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfComfortLid, ML_STAR.Ham_ComfortLid_Stack_ParkPos, t_trpHamiltonComfortLidStackParkPos, t_intMaxComfortLidPerStack, ML_STAR);
  Trace ("BEFORE  ********* g_int_TotalNumberOfComfortLid:   ", g_int_TotalNumberOfComfortLid);
  Trace ("********* t_intMaxComfortLidPerStack:   ", t_intMaxComfortLidPerStack);
  Trace ("********* l_intNumberOfHamiltonComfortLids:   ", l_intNumberOfHamiltonComfortLids);
  Trace ("********* g_int_TotalNumberOfHSP:   ", g_int_TotalNumberOfHSP);
  Trace ("********* t_intMaxPlatesPerStackHSP:   ", t_intMaxPlatesPerStackHSP);
  Trace ("********* l_intNumberOfHSPPlates:   ", l_intNumberOfHSPPlates);
  Trace ("********* g_int_TotalNumberOfMIDI:   ", g_int_TotalNumberOfMIDI);
  Trace ("********* t_intMaxPlatesPerStackMIDI:   ", t_intMaxPlatesPerStackMIDI);
  Trace ("********* l_intNumberOfMIDIPlates:   ", l_intNumberOfMIDIPlates);
  MECC::TraceComment(Translate("Stack reduced completed"));
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    l_bln_CarrierLoadable = ASWGLOBAL::BOOL::FALSE;
  }
  else
  {
    l_bln_CarrierLoadable = ASWGLOBAL::BOOL::TRUE;
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::ODTC, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, t_blnSkipLoadingDialogs, Translate("ODTCHamiltonComforlidPosition.png"), Translate("HamiltonComfortLid.png"));
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::PLT_Stack, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_blnSkipLoadingDialogs, Translate("PlateStackerCarrier.png"), Translate("PlateStackerCarrier_SubImage.png"));
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    l_strLastMessage = StrConcat8(Translate("Tip usage is set to utilize full columns or racks. Please follow these tip inventory guidelines."), Translate("\n"), Translate("\n   1. Load full tip racks for P50 and P300 tips. [Fragmented tips racks are unusable by the MPH.]"), Translate("\n   2. If an empty tip rack is greyed out by the tip inventory then it should be kept physically empty at tip refill events. [This empty rack is used by the MPH for tip ejects.]"), Translate("\n   3. Make sure to include ALL the tips which are loaded onto the system in the Tip Counter dialogue which will be displayed after clicking OK below."), Translate("\n\nNote: When space permits, add an extra full rack of P50 and P300 Tips to act as buffer inventory for the MPH."), Translate(""), Translate(""));
    NGSSTARLOADING::Display_Message_Dialog(l_strLastMessage);
  }
  Trace ("********* t_blnUseNGSSTARMOA:   ", t_blnUseNGSSTARMOA);
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    Trace ("********* Load_Carrier_MultiTipSeq --- START *********");
    NGSSTARLOADING::Load_Carrier_MultiTipSeq(ML_STAR, ARW_Global::CarrierType::TIP50_02, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_blnSkipLoadingDialogs, Translate("Tip50ulFilterCarriersMOA.png"), Translate("TIP_50MOA.png"));
    Trace ("********* Load_Carrier_MultiTipSeq --- END *********");
  }
  else
  {
    NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::TIP50_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_blnSkipLoadingDialogs, Translate("Tip50ulFilterCarriers.png"), Translate("TIP_50.png"));
  }
  MECC::TraceComment(Translate("ChangeLog_GB_230711: Used Load_Carrier_MultiTipSeq command to load 300 µl tips on the MOA configuration."));
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::Load_Carrier_MultiTipSeq(ML_STAR, ARW_Global::CarrierType::TIP300_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_blnSkipLoadingDialogs, Translate("Tip300ulFilterCarriersMOA.png"), Translate("Tip_300MOA.png"));
    if(0){
      NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::TIP300_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_blnSkipLoadingDialogs, Translate("Tip300ulFilterCarriersMOA.png"), Translate("Tip_300MOA.png"));
    }
  }
  else
  {
    NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::TIP300_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_blnSkipLoadingDialogs, Translate("Tip300ulFilterCarriers.png"), Translate("TIP_300.png"));
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::RGT1, t_blnSkipLoadingRoutine, l_bln_CarrierLoadable, t_blnSkipLoadingDialogs, Translate("ReagentContainerCarrier1.png"), Translate(""));
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::RGT2, t_blnSkipLoadingRoutine, l_bln_CarrierLoadable, t_blnSkipLoadingDialogs, Translate("ReagentContainerCarrier2.png"), Translate(""));
  }
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARLOADING::Load_Carrier_WithoutBarcodeReading(ML_STAR, ARW_Global::CarrierType::Tube_Carrier24, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_blnSkipLoadingDialogs, Translate("CarrierVial24.png"), Translate(""));
    NGSSTARLOADING::Load_Carrier_WithoutBarcodeReading(ML_STAR, ARW_Global::CarrierType::Vial_Carrier32_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_blnSkipLoadingDialogs, Translate("CarrierVial32_1.png"), Translate(""));
    NGSSTARLOADING::Load_Carrier_WithoutBarcodeReading(ML_STAR, ARW_Global::CarrierType::Vial_Carrier32_02, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_blnSkipLoadingDialogs, Translate("CarrierVial32_2.png"), Translate(""));
    if(0){
      NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Tube_Carrier24, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_blnSkipLoadingDialogs, Translate("CarrierVial24.png"), Translate(""));
      NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Vial_Carrier32_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_blnSkipLoadingDialogs, Translate("CarrierVial32_1.png"), Translate(""));
      NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Vial_Carrier32_02, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_blnSkipLoadingDialogs, Translate("CarrierVial32_2.png"), Translate(""));
    }
  }
  else
  {
    NGSSTARLOADING::Load_Carrier_WithoutBarcodeReading(ML_STAR, ARW_Global::CarrierType::Vial_Carrier32_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_blnSkipLoadingDialogs, Translate("24TubesVialCarrier.png"), Translate(""));
    if(0){
      NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Vial_Carrier32_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_blnSkipLoadingDialogs, Translate("24TubesVialCarrier.png"), Translate(""));
    }
  }
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::PLT_TIP1000, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_blnSkipLoadingDialogs, Translate("PlateTipCarrierMOA.png"), Translate(""));
    }
    else
    {
      NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::PLT_TIP1000, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_blnSkipLoadingDialogs, Translate("PlateTipCarrier.png"), Translate("PlateTipCarrier_Subimage.png"));
    }
  }
  else
  {
    NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::PLT_TIP1000, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_blnSkipLoadingDialogs, Translate("PlateTipCarrier.png"), Translate("TIP_1000.png"));
  }
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
  }
  else
  {
    NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::HHSx2_PLT, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, t_blnSkipLoadingDialogs, Translate("HHS_HSP_PipettePosition.png"), Translate(""));
  }
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    if(0){
      NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::CPAC, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, t_blnSkipLoadingDialogs, Translate("CPACCarrier.png"), Translate("CPAC_Adapter.png"));
    }
    NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::CPAC, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, t_blnSkipLoadingDialogs, Translate("CPACCarrier.png"), Translate("CPAC_HSP.png"));
  }
  else
  {
    if(0){
      NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::CPAC, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, t_blnSkipLoadingDialogs, Translate("CPACCarrier.png"), Translate("CPAC_Adapter.png"));
    }
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_strSubImageName = Translate("IndexAdapterPlate_trimmed.png");
    }
    if (t_arrBlnProcessActivation.ElementAt( 8 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_strSubImageName = Translate("IndexPrimerPlate_trimmed.png");
    }
    NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::CPAC, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, t_blnSkipLoadingDialogs, Translate("CPACCarrier.png"), l_strSubImageName);
  }
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  else
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  NGSSTARLOADING::Display_Message_Dialog(Translate("Deck loading completed. Press OK to start the run."));
  l_strLastMessage = StrConcat2(l_str_FunctionName, Translate(" is completed"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
}

private function _SelectProcesses(  ) void {
  private variable l_strIndexLabwareFormat;
  private variable l_strFileInputWorklist;
  private variable l_arr_strProcessID[];
  private variable l_int_OptionSelected;
  private variable l_intDialogID;
  private variable l_arr_strMandatoryStopProcess[];
  private variable l_arr_strDeactivatedStartProcessID[];
  private variable l_arr_strProcessIDCombinations[];
  private variable l_str_FunctionName;
  private variable l_strProtocolName;
  private variable l_blnDisplayDialog;
  private variable l_blnDisplayVolumeDialog;
  private variable l_strHeader;
  private variable l_intNumberOfPanels;
  private variable l_intCounterListOfPanelIDs;
  private variable l_intNumberOfIndexSets;
  private variable l_intCounterNumberOfSamples;
  private variable l_strIndexSetCheck;
  private variable l_strIndexSet;
  private variable l_intCounterListIndexSets;
  private variable l_blnDisplayVolumeDialog2;
  private variable l_strLastMessage;
  private variable l_strResultCycles;
  private variable l_arrToolTip[];
  private variable l_arrTypes[];
  private variable l_arrResults[];
  private variable l_arrLabels[];
  private variable l_arrValues[];
  private variable l_arrUnits[];
  private variable l_arrRanges[];
  private variable l_blnDisplayDialog5;
  l_str_FunctionName = Translate("");
  l_str_FunctionName = GetFunctionName();
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_str_FunctionName, ASWGLOBAL::BOOL::TRUE);
  NGSSTARLOADING::Display_InputWorklist_Dialog(l_strFileInputWorklist);
  Trace ("Selected input worklist :", l_strFileInputWorklist);
  t_arrSamplePositionIDs.SetSize(0);
  t_arrIndexSet.SetSize(0);
  t_arrListOfIndexSets.SetSize(0);
  t_arrNumberIndexSet.SetSize(0);
  t_arrIndexPositionIDs.SetSize(0);
  t_arrIndexIDs.SetSize(0);
  t_arrPanelPositionIDs.SetSize(0);
  t_arrListOfPanelIDs.SetSize(0);
  t_arrPanelID.SetSize(0);
  t_arrNumberPanelID.SetSize(0);
  NGSSTARLOADING::CUSTOMIZED_Read_InputWorklist_ExcelOrCSVFormat_QIAseqRNAFusionXPPanels(l_strFileInputWorklist, ML_STAR.HSP_Pipette2, t_intNumberOfSamplesFromFile, t_intOneOrTwoIndexSets, t_arrListOfIndexSets, t_arrIndexSet, t_arrNumberIndexSet, t_arrIndexPositionIDs, t_arrIndexIDs, t_arrListOfPanelIDs, t_arrPanelPositionIDs, t_arrPanelID, t_arrNumberPanelID, t_intNumberOfPanels, t_arrAdapterLigatioPlateLabwareID, t_arrAdapterLigationPlatePositionIDs, l_strIndexLabwareFormat);
  if (t_intNumberOfSamplesFromFile > 96)
  {
    l_strHeader = StrConcat2(Translate("Invalid Input Parameter"), Translate(""));
    l_strLastMessage = StrConcat8(Translate("The maximum number ofsamples used in this method is limited to 96."), Translate("\nThe number of samples from the input worklist exceeds this limit."), Translate("\n\nThe method will abort. Please check your input worklist."), Translate(""), Translate("\n\nClick OK to continue."), Translate(""), Translate(""), Translate(""));
    l_int_OptionSelected = VectorCustomDialogs::MessageDialog(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage);
    if (l_int_OptionSelected == 1)
    {
      abort;
    }
  }
  t_arr_strProcessID.SetSize(0);
  t_arr_strProcessID.AddAsLast(Translate("Process 1: First-strand cDNA synthesis"));
  t_arr_strProcessID.AddAsLast(Translate("Process 2: Second-strand synthesis"));
  t_arr_strProcessID.AddAsLast(Translate("Process 3: End Repair / dA tailing"));
  t_arr_strProcessID.AddAsLast(Translate("Process 4: Adapter Ligation"));
  t_arr_strProcessID.AddAsLast(Translate("Process 5: Sample cleanup 1"));
  t_arr_strProcessID.AddAsLast(Translate("Process 6: SPE target enrichment"));
  t_arr_strProcessID.AddAsLast(Translate("Process 7: Sample cleanup 2"));
  t_arr_strProcessID.AddAsLast(Translate("Process 8: Universal PCR amplification"));
  t_arr_strProcessID.AddAsLast(Translate("Process 9: Sample cleanup 3"));
  l_arr_strProcessIDCombinations.SetSize(0);
  l_arr_strProcessIDCombinations.AddAsLast(Translate("1.2.3.4.5.6"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("2.3.4.5.6"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("3.4.5.6"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("4.5.6"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("5.6"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("6.7.8.9"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("7.8.9"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("8.9"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("9"));
  l_arr_strDeactivatedStartProcessID.SetSize(0);
  if (t_intPreOrPostSystem == 1)
  {
    l_arr_strDeactivatedStartProcessID.AddAsLast(6);
    l_arr_strDeactivatedStartProcessID.AddAsLast(7);
    l_arr_strDeactivatedStartProcessID.AddAsLast(8);
    l_arr_strDeactivatedStartProcessID.AddAsLast(9);
  }
  if (t_intPreOrPostSystem == 2)
  {
    l_arr_strDeactivatedStartProcessID.AddAsLast(1);
    l_arr_strDeactivatedStartProcessID.AddAsLast(2);
    l_arr_strDeactivatedStartProcessID.AddAsLast(3);
    l_arr_strDeactivatedStartProcessID.AddAsLast(4);
    l_arr_strDeactivatedStartProcessID.AddAsLast(5);
  }
  if (t_intPreOrPostSystem == 3)
  {
    l_arr_strDeactivatedStartProcessID.AddAsLast(4);
    l_arr_strDeactivatedStartProcessID.AddAsLast(5);
  }
  l_arr_strMandatoryStopProcess.SetSize(0);
  if (t_intPreOrPostSystem == 1)
  {
    l_arr_strMandatoryStopProcess.AddAsLast(1);
    l_arr_strMandatoryStopProcess.AddAsLast(3);
    l_arr_strMandatoryStopProcess.AddAsLast(4);
    l_arr_strMandatoryStopProcess.AddAsLast(6);
    l_arr_strMandatoryStopProcess.AddAsLast(7);
    l_arr_strMandatoryStopProcess.AddAsLast(8);
  }
  if (t_intPreOrPostSystem == 2)
  {
    l_arr_strMandatoryStopProcess.AddAsLast(1);
    l_arr_strMandatoryStopProcess.AddAsLast(2);
    l_arr_strMandatoryStopProcess.AddAsLast(3);
    l_arr_strMandatoryStopProcess.AddAsLast(4);
    l_arr_strMandatoryStopProcess.AddAsLast(5);
  }
  if (t_intPreOrPostSystem == 3)
  {
    l_arr_strMandatoryStopProcess.AddAsLast(3);
    l_arr_strMandatoryStopProcess.AddAsLast(4);
  }
  MECC::TraceComment(Translate("PROCESS DEFINITIONS - INPUT"));
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strProcessID:"), l_arr_strProcessID);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strProcessIDCombinations:"), l_arr_strProcessIDCombinations);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strDeactivatedStartProcessID:"), l_arr_strDeactivatedStartProcessID);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strMandatoryStopProcess:"), l_arr_strMandatoryStopProcess);
  NGSSTARLOADING::Display_SelectProcesses_Dialog(1, t_arr_strProcessID, l_arr_strProcessIDCombinations, l_arr_strDeactivatedStartProcessID, l_arr_strMandatoryStopProcess, t_intSelectedIndexSTART, t_intSelectedIndexSTOP, t_arrBlnProcessActivation);
  l_intDialogID = 6;
  NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Was the RNA extracted from FFPE tissue"), Translate("YES"));
  NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Was the RNA extracted from FFPE tissue"), Translate("NO"));
  if (t_arrBlnProcessActivation.ElementAt( 7 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_blnDisplayDialog5 = ASWGLOBAL::BOOL::TRUE;
  }
  else
  {
    if (t_arrBlnProcessActivation.ElementAt( 9 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_blnDisplayDialog5 = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      l_blnDisplayDialog5 = ASWGLOBAL::BOOL::FALSE;
    }
  }
  if (l_blnDisplayDialog5 == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(l_intDialogID);
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Was the RNA extracted from FFPE tissue"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      t_blnReduceBeadVolume = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      t_blnReduceBeadVolume = ASWGLOBAL::BOOL::FALSE;
    }
  }
  if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_intNumberOfPanels=t_arrListOfPanelIDs.GetSize();
    if (l_intNumberOfPanels > 12)
    {
      l_strHeader = StrConcat2(Translate("Invalid Input Parameter"), Translate(""));
      l_strLastMessage = StrConcat8(Translate("The maximum number of panels used in this method is limited to 12."), Translate("\nThe number of different panels from the input worklist exceeds this limit."), Translate("\n\nThe method will abort. Please check your input worklist."), Translate(""), Translate("\n\nClick OK to continue."), Translate(""), Translate(""), Translate(""));
      l_int_OptionSelected = VectorCustomDialogs::MessageDialog(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage);
      if (l_int_OptionSelected == 1)
      {
        abort;
      }
    }
  }
  if (t_arrBlnProcessActivation.ElementAt( 7 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_intNumberOfIndexSets=t_arrListOfIndexSets.GetSize();
    if (l_intNumberOfIndexSets > 2)
    {
      l_strHeader = StrConcat2(Translate("Invalid Input Parameter"), Translate(""));
      l_strLastMessage = StrConcat8(Translate("The maximum number of index set plates used in this method is limited to 2."), Translate("\nThe number of different index sets from the input worklist exceeds this limit."), Translate("\n\nThe method will abort. Please check your input worklist."), Translate(""), Translate("\n\nClick OK to continue."), Translate(""), Translate(""), Translate(""));
      l_int_OptionSelected = VectorCustomDialogs::MessageDialog(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage);
      if (l_int_OptionSelected == 1)
      {
        abort;
      }
    }
  }
  l_strHeader = StrConcat2(Translate("User confirmation of Worklist"), Translate(""));
  l_strLastMessage = StrConcat12(Translate("The worklist "), l_strFileInputWorklist, Translate(" has been imported."), Translate("\n\nA total of "), t_intNumberOfSamplesFromFile, Translate(""), Translate(""), Translate(" samples have been selected for processing."), Translate(""), Translate(""), Translate(""), Translate(""));
  if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_intNumberOfPanels == 1)
    {
      l_strLastMessage = StrConcat8(l_strLastMessage, Translate("\n\n"), t_intNumberOfPanels, Translate(" panel was detected for the samples being processed."), Translate("\nThe following panel was detected:"), Translate(""), Translate(""), Translate(""));
      l_strLastMessage = StrConcat12(l_strLastMessage, Translate("\n---------"), t_arrNumberPanelID.ElementAt( 1 -1), Translate("  "), t_arrListOfPanelIDs.ElementAt( 1 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    else
    {
      l_strLastMessage = StrConcat8(l_strLastMessage, Translate("\n\n"), t_intNumberOfPanels, Translate(" panels were detected for the samples being processed."), Translate("\nThe following panels were detected:"), Translate(""), Translate(""), Translate(""));
      {
        for(l_intCounterListOfPanelIDs = 0; l_intCounterListOfPanelIDs < t_intNumberOfPanels;)
        {
          l_intCounterListOfPanelIDs = l_intCounterListOfPanelIDs + 1;
          l_strLastMessage = StrConcat12(l_strLastMessage, Translate("\n---------"), t_arrNumberPanelID.ElementAt( l_intCounterListOfPanelIDs -1), Translate("  "), t_arrListOfPanelIDs.ElementAt( l_intCounterListOfPanelIDs -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
      }
    }
  }
  if (t_arrBlnProcessActivation.ElementAt( 7 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_strLastMessage = StrConcat8(l_strLastMessage, Translate("\n\n"), t_intOneOrTwoIndexSets, Translate(" index sets were detected for the samples being processed."), Translate("\nThe following index sets were detected:"), Translate(""), Translate(""), Translate(""));
    {
      for(l_intCounterListIndexSets = 0; l_intCounterListIndexSets < t_intOneOrTwoIndexSets;)
      {
        l_intCounterListIndexSets = l_intCounterListIndexSets + 1;
        l_strLastMessage = StrConcat12(l_strLastMessage, Translate("\n---------"), t_arrNumberIndexSet.ElementAt( l_intCounterListIndexSets -1), Translate("  "), t_arrListOfIndexSets.ElementAt( l_intCounterListIndexSets -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      }
    }
  }
  l_strLastMessage = StrConcat2(l_strLastMessage, Translate("\n\nIf this is correct select ' OK ', otherwise select ' CANCEL ' to abort the current run and check the input worklist."));
  l_int_OptionSelected = VectorCustomDialogs::MessageDialog(l_strHeader, 2, 1, 0, 0, 0, l_strLastMessage);
  if (l_int_OptionSelected == 2)
  {
    abort;
  }
  t_arrIndex1PositionIDs.SetSize(0);
  t_arrIndex2PositionIDs.SetSize(0);
  l_strIndexSetCheck=t_arrListOfIndexSets.GetAt(1-1);
  {
    for(l_intCounterNumberOfSamples = 0; l_intCounterNumberOfSamples < t_intNumberOfSamplesFromFile;)
    {
      l_intCounterNumberOfSamples = l_intCounterNumberOfSamples + 1;
      l_strIndexSet=t_arrIndexSet.GetAt(l_intCounterNumberOfSamples-1);
      if (l_strIndexSet == l_strIndexSetCheck)
      {
        t_arrIndex1PositionIDs.AddAsLast(t_arrIndexPositionIDs.ElementAt( l_intCounterNumberOfSamples -1));
      }
      else
      {
        t_arrIndex2PositionIDs.AddAsLast(t_arrIndexPositionIDs.ElementAt( l_intCounterNumberOfSamples -1));
      }
    }
  }
  Util2::Debug::TraceArray(Translate("t_arrIndex1PositionIDs    "), t_arrIndex1PositionIDs);
  Util2::Debug::TraceArray(Translate("t_arrIndex2PositionIDs    "), t_arrIndex2PositionIDs);
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_intDialogID = 2;
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Do you want to use the FastSelect agent to block rRNA and globulin signals? (Appendix G)"), Translate("YES"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Do you want to use the FastSelect agent to block rRNA and globulin signals? (Appendix G)"), Translate("NO"));
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(l_intDialogID);
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Do you want to use the FastSelect agent to block rRNA and globulin signals? (Appendix G)"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      t_blnFastSelectDepletion = ASWGLOBAL::BOOL::TRUE;
      t_fltVolumeSampleInput = 4;
    }
    else
    {
      t_blnFastSelectDepletion = ASWGLOBAL::BOOL::FALSE;
      t_fltVolumeSampleInput = 5;
    }
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    l_blnDisplayDialog = ASWGLOBAL::BOOL::TRUE;
    l_intDialogID = 3;
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Is the ODTC module used in this run?"), Translate("YES"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Is the ODTC module used in this run?"), Translate("NO"));
  }
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::FALSE)
  {
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      l_blnDisplayDialog = ASWGLOBAL::BOOL::TRUE;
      l_intDialogID = 3;
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Is the MPH used in this run?"), Translate("YES"));
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Is the MPH used in this run?"), Translate("NO"));
    }
  }
  else
  {
  }
  if (l_blnDisplayDialog == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(l_intDialogID);
    l_blnDisplayVolumeDialog = ASWGLOBAL::BOOL::FALSE;
  }
  NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Is the ODTC module used in this run?"), l_int_OptionSelected);
  if (l_int_OptionSelected == 1)
  {
    t_blnODTCused = ASWGLOBAL::BOOL::TRUE;
  }
  else
  {
    t_blnODTCused = ASWGLOBAL::BOOL::FALSE;
  }
  if (t_arrBlnProcessActivation.ElementAt( 8 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      l_arrLabels.SetSize(0);
      l_arrLabels.AddAsLast(Translate("Number of Cycles for Universal PCR"));
      l_arrValues.SetSize(0);
      l_arrUnits.SetSize(0);
      l_arrTypes.SetSize(0);
      l_arrRanges.SetSize(0);
      l_arrToolTip.SetSize(0);
      l_arrResults.SetSize(0);
      l_arrValues.AddAsLast(Translate(""));
      l_arrUnits.AddAsLast(Translate(" cycles (14 - 30)"));
      l_arrTypes.AddAsLast(1);
      l_arrRanges.AddAsLast(Translate("14|30"));
      l_arrToolTip.AddAsLast(Translate("14 - 30"));
      VectorCustomDialogs::InputDialog(Translate("Universal PCR"), 1, 0, 0, Translate("Select Cycle Number for Universal PCR"), Translate(""), l_arrLabels, l_arrValues, l_arrUnits, l_arrTypes, l_arrRanges, l_arrToolTip, l_arrResults);
      l_strResultCycles=l_arrResults.GetAt(1-1);
      l_strResultCycles = StrIStr(l_strResultCycles);
    }
  }
  t_strPCRProgramODTC = Translate("RNAFusionXPPanel_UPCR_Cycles");
  if (t_blnTestODTCWithShortDummyProtocol == ASWGLOBAL::BOOL::FALSE)
  {
    t_strPCRProgramODTC = StrConcat4(t_strPCRProgramODTC, l_strResultCycles, Translate(""), Translate(""));
  }
  else
  {
    t_strPCRProgramODTC = StrConcat4(t_strPCRProgramODTC, l_strResultCycles, Translate("_short"), Translate(""));
  }
  Trace ("t_strPCRProgramODTC :   ",t_strPCRProgramODTC);
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Is the MPH used in this run?"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::FALSE;
    }
  }
  else
  {
    t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::TRUE;
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    l_blnDisplayVolumeDialog2 = ASWGLOBAL::BOOL::TRUE;
    l_intDialogID = 4;
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Store HSP in the ODTC over night at the end of the method?"), Translate("Store HSP over night at room temperature"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Store HSP in the ODTC over night at the end of the method?"), Translate("Store HSP over night at 12 °C"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Store HSP in the ODTC over night at the end of the method?"), Translate("Do not store HSP over night."));
  }
  if (l_blnDisplayVolumeDialog2 == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(l_intDialogID);
  }
  NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Store HSP in the ODTC over night at the end of the method?"), l_int_OptionSelected);
  if (l_int_OptionSelected == 3)
  {
    t_blnStoreHSPoverNightWithinODTC = ASWGLOBAL::BOOL::FALSE;
  }
  else
  {
    t_blnStoreHSPoverNightWithinODTC = ASWGLOBAL::BOOL::TRUE;
    if (l_int_OptionSelected == 1)
    {
      t_blnStoreAtRoomTemperature = ASWGLOBAL::BOOL::TRUE;
    }
    if (l_int_OptionSelected == 2)
    {
      t_blnStoreAtRoomTemperature = ASWGLOBAL::BOOL::FALSE;
    }
  }
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("******** t_blnStoreHSPoverNightWithinODTC:   "), t_blnStoreHSPoverNightWithinODTC, Translate("******** t_blnStoreAtRoomTemperature:   "), t_blnStoreAtRoomTemperature);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_DownloadProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_intSelectedIndexSTART == 1)
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_Preheat25CLid75C");
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
    if (t_intSelectedIndexSTART == 2)
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_Preheat37CLid110C");
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
    if (t_intSelectedIndexSTART == 3)
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_Preheat4CLid75C");
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
    if (t_intSelectedIndexSTART == 4)
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_Preheat4CLid30C");
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
    if (t_intSelectedIndexSTART == 5)
    {
    }
    if (t_intSelectedIndexSTART == 6)
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_Preheat95CLid110C");
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
    if (t_intSelectedIndexSTART == 7)
    {
    }
    if (t_intSelectedIndexSTART == 8)
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_Preheat95CLid110C");
    }
  }
  l_strLastMessage = StrConcat2(l_str_FunctionName, Translate(" is completed"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
}

private function ProcessX_StoreHSPWithinODTCOverNight( sequence & i_trpHSP, variable i_blnIncubateODTCWithoutActiveCooling ) void {
  private variable l_strReadCurrentBarcode;
  private variable l_strSequenceName;
  private variable l_strODTCMessage;
  private variable l_intODTCStorageCycle;
  private variable l_retValueDialog;
  private variable l_strODTCFolderXML;
  private variable l_arrODTCStorageListInformation[];
  private variable l_blnRetrievePlateFromODTC;
  private variable l_str_FunctionName;
  private variable l_strProtocolName;
  private variable l_strLastMessage;
  l_str_FunctionName = Translate("");
  l_str_FunctionName = GetFunctionName();
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(l_str_FunctionName);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process X: Storing the HSP within ODTC over night."), ASWGLOBAL::BOOL::TRUE);
  if(0){
    l_strODTCFolderXML = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Qiagen\\QIAseq RNA Fusion XP Panels\\Files\\ODTC_scripts\\StorePlateOverNight.xml");
  }
  l_strODTCFolderXML = StrConcat4(t_strODTCDirectory, Translate("StorePlateOverNight.xml"), Translate(""), Translate(""));
  l_blnRetrievePlateFromODTC = ASWGLOBAL::BOOL::FALSE;
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    {
      l_intODTCStorageCycle = 0;
      while (1 == 1)
      {
        l_intODTCStorageCycle = l_intODTCStorageCycle + 1;
        if (l_intODTCStorageCycle == 1)
        {
          MECC::TraceComment(Translate("New line inserted before downloading new xml has a preheat step is now performed if storage of plate is active"));
          if(0){
            NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
          }
          if (0 == 666)
          {
            NGSSTARPREP::ODTC_DownloadProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML);
          }
          if(0){
            NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
            NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, i_trpHSP, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
            Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
            NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
            NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
          }
          if (i_blnIncubateODTCWithoutActiveCooling == ASWGLOBAL::BOOL::TRUE)
          {
            MECC::TraceComment(Translate("NO ODTC protocol will be activated."));
          }
          else
          {
            l_strProtocolName = Translate("Init_20CLid30C");
            l_strLastMessage = StrConcat4(Translate(""), Translate("Running "), l_strProtocolName, Translate(" protocol..."));
            NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
            NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
            NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
            l_strProtocolName = Translate("StorePlate12degrees");
            l_strLastMessage = StrConcat4(Translate(""), Translate("Running "), l_strProtocolName, Translate(" protocol..."));
            NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
            NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
          }
        }
        l_arrODTCStorageListInformation.SetSize(0);
        l_strODTCMessage = StrConcat2(Translate("ODTC - 2 hours cycle number : "), l_intODTCStorageCycle);
        l_arrODTCStorageListInformation.AddAsLast(l_strODTCMessage);
        l_strSequenceName = SeqGetName(i_trpHSP);
        l_strODTCMessage = StrConcat2(Translate("Retrieving the plate to following sequence : "), l_strSequenceName);
        l_arrODTCStorageListInformation.AddAsLast(l_strODTCMessage);
        l_arrODTCStorageListInformation.AddAsLast(Translate("Press OK to retrieve the HSP from ODTC."));
        l_retValueDialog = VectorCustomDialogs::ListDialog(Translate("ODTC long time storage."), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::Ok, 0, 0, 7200, Translate(""), Translate("This procedure will prolong itself each 2 hours automatically. Press OK to retrieve HSP."), l_arrODTCStorageListInformation);
        Trace("l_retValueDialog : ",l_retValueDialog);
        if (t_blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
        {
          l_retValueDialog = VectorCustomDialogs::MessageDialog(Translate("Simulation mode ODTC cycles"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Press YES to quit endless loop. Press NO to add an additional ODTC storage cycle."));
          if (l_retValueDialog == ASWGLOBAL::DIALOG::YES)
          {
            l_blnRetrievePlateFromODTC = ASWGLOBAL::BOOL::TRUE;
          }
        }
        else
        {
          if (l_retValueDialog == ASWGLOBAL::DIALOG::OK)
          {
            l_blnRetrievePlateFromODTC = ASWGLOBAL::BOOL::TRUE;
          }
        }
        if (l_blnRetrievePlateFromODTC == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLastMessage = StrConcat4(Translate(""), Translate("Unload plate from ODTC..."), Translate(""), Translate(""));
          NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
          if (i_blnIncubateODTCWithoutActiveCooling == ASWGLOBAL::BOOL::TRUE)
          {
            MECC::TraceComment(Translate("NO ODTC protocol will have to be stopped."));
          }
          else
          {
            NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
          }
          NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
          NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
          if(0){
            SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
          }
          NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, i_trpHSP, 0, 1, l_strReadCurrentBarcode);
          NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
          break;
        }
      }
    }
    if (i_blnIncubateODTCWithoutActiveCooling == ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      l_strProtocolName = Translate("Init_20CLid30C");
      l_strLastMessage = StrConcat4(Translate(""), Translate("Running "), l_strProtocolName, Translate(" protocol..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
      NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
      l_strProtocolName = Translate("Dehumidify block");
      l_strLastMessage = StrConcat4(Translate(""), Translate("Running "), l_strProtocolName, Translate(" protocol..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, Translate("Dehumidify block"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
      NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
      NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    }
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process X: Storing the HSP within ODTC over night is completed"), ASWGLOBAL::BOOL::TRUE);
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
}

private function Process002_ODTCMovementCheck(  ) void {
  private variable l_str_FunctionName;
  private variable loopCounter2;
  private variable l_strReadCurrentBarcode;
  private variable l_strLastMessage;
  l_str_FunctionName = Translate("");
  l_str_FunctionName = GetFunctionName();
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(l_str_FunctionName);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_str_FunctionName, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM0, t_intRequiredNumberOf300uLTipsM0, t_intRequiredNumberOf1000uLTipsM0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
  {
    for(loopCounter2 = 0; loopCounter2 < t_int_NumberOfODTCTransportCycles;)
    {
      loopCounter2 = loopCounter2 + 1;
      l_strLastMessage = StrConcat4(Translate("Cycle "), loopCounter2, Translate(" of "), t_int_NumberOfODTCTransportCycles);
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpODTCMovementCheck, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
      NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
      NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
      NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpODTCMovementCheck, 0, 1, l_strReadCurrentBarcode);
    }
  }
  l_strLastMessage = StrConcat2(l_str_FunctionName, Translate(" is completed"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
}

private function Process1_FirstStrandcDNASynthesis(  ) void {
  private variable l_str_FunctionName;
  private variable loopCounter1;
  private variable l_strReadCurrentBarcode;
  private variable l_strProtocolName;
  private variable l_strHeader;
  private variable l_strProcessName;
  private variable l_strReactionAndPlateName;
  private variable l_strNextProcessName;
  private variable l_strImage;
  private variable l_strMailSubject;
  private variable l_strReadBarcode;
  private variable l_strLastMessage;
  l_str_FunctionName = Translate("");
  l_str_FunctionName = GetFunctionName();
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(l_str_FunctionName);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_str_FunctionName, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_TipCounterRead_CustomTips(ML_STAR, t_intRequiredNumberOf50uLTipsM1, t_intRequiredNumberOf300uLTipsM1, t_intRequiredNumberOf1000uLTipsM1, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  else
  {
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM1, t_intRequiredNumberOf300uLTipsM1, t_intRequiredNumberOf1000uLTipsM1, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  l_strProcessName = t_arr_strProcessID.ElementAt( 1 -1);
  l_strNextProcessName = t_arr_strProcessID.ElementAt( 2 -1);
  l_strReactionAndPlateName = Translate("RP Primer II");
  MECC::TraceComment(Translate("=============\n\nMove HSP plate to CPAC\n\n============="));
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
  }
  else
  {
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
  }
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::FALSE)
  {
    if (t_blnFastSelectDepletion == ASWGLOBAL::BOOL::TRUE)
    {
      l_strLastMessage = StrConcat4(Translate(""), Translate("Adding "), Translate("diluted FastSelect agent"), Translate("..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_DilutedFastSelect, t_seqHSP_CPAC, t_fltVolumeP01_FastSelect, Translate("QIAseqRNAFusionXPPanel_50F_FastSelect_DispenseSurface_Empty"), 5, 0, t_fltVolumeP01_FastSelectReactionMixing, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
    }
  }
  MECC::TraceComment(Translate("=============\n\nAdding RP Primer II\n\n============="));
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnFastSelectDepletion == ASWGLOBAL::BOOL::TRUE)
    {
      l_strLastMessage = StrConcat4(Translate(""), Translate("Adding "), Translate("RP Primer II and diluted FastSelect"), Translate("..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_RPPrimerII, t_seqHSP_CPAC, t_fltVolumeP01_RPPrimerIIAndFastSelect, Translate("QIAseq_RNAFusionXP_RPPrimerII_LVF_DispenseSurface_Empty"), 10, 0, t_fltVolumeP01_FSSynthesisRPPrimerIIMix, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
    }
    else
    {
      l_strLastMessage = StrConcat4(Translate(""), Translate("Adding "), Translate("RP Primer II"), Translate("..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_RPPrimerII, t_seqHSP_CPAC, t_fltVolumeP01_RPPrimerII, Translate("QIAseq_RNAFusionXP_RPPrimerII_LVF_DispenseSurface_Empty"), 10, 0, t_fltVolumeP01_FSSynthesisRPPrimerIIMix, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
    }
  }
  else
  {
    l_strLastMessage = StrConcat4(Translate(""), Translate("Adding "), Translate("RP Primer II"), Translate("..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_RPPrimerII, t_seqHSP_CPAC, t_fltVolumeP01_RPPrimerII, Translate("QIAseq_RNAFusionXP_RPPrimerII_LVF_DispenseSurface_Empty"), 10, 0, t_fltVolumeP01_FSSynthesisRPPrimerIIMix, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  MECC::TraceComment(Translate("=============\n\nIncubation in ODTC or off-deck thermal cycler\n\n============="));
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    l_strLastMessage = StrConcat4(Translate(""), Translate("Load primer priming plate for incubation in ODTC..."), Translate(""), Translate(""));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    MECC::TraceComment(Translate("=============\nTransport primer priming plate from CPAC to HSP_Pipette2\n============="));
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    MECC::TraceComment(Translate("=============\nTransport primer priming plate from HSP_Pipette2 to ODTC\n============="));
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_blnTestODTCWithShortDummyProtocol == ASWGLOBAL::BOOL::TRUE)
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_PrimerPriming_short");
    }
    else
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_PrimerPriming");
    }
    l_strLastMessage = StrConcat4(Translate(""), Translate("Running "), l_strProtocolName, Translate(" protocol..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_GetDataFromLastRun(t_intDeviceNumberODTC, Translate("RNAFusionXPPanel_PrimerPriming"));
    l_strLastMessage = StrConcat4(Translate(""), Translate("Unload primer priming plate from ODTC..."), Translate(""), Translate(""));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
    }
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    l_strProtocolName = Translate("RNAFusionXPPanel_Block25Lid103");
    l_strLastMessage = Translate("Prepare ODTC for next incubation...");
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
  }
  else
  {
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), Translate("primer priming plate is prepared."), Translate(" "));
    l_strLastMessage = StrConcat4(l_strProcessName, Translate(" Primer Priming plate is prepared and ready for incubation in off-deck thermal cycler. The "), Translate("primer priming"), Translate(" plate is hold on the CPAC at 4°C"));
    NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
    l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), Translate("''primer priming''"), Translate(" plate for incubation in off-deck thermal cycler..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    l_strHeader = StrConcat2(l_strProcessName, Translate(" - Unload prepared reactions"));
    l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Unload prepared reactions."), Translate("\n\nThe "), Translate("''primer priming''"), Translate(" reactions are prepared and ready for incubation in off-deck thermal cycler."), Translate(""), Translate(""), Translate("\nClick OK to continue."));
    VectorCustomDialogs::MessageDialog(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage);
    MECC::TraceComment(Translate("============\n\nMove HSP plate\n\n============"));
    l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrierMOA.png"));
    }
    else
    {
      l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrier.png"));
    }
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), Translate("''primer priming''"), Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), Translate("''primer priming''"), Translate(" plate from position 2.\n2. Label the plate with "), Translate("''Primer Priming"), Translate(" plate''."), Translate("\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), Translate("''Primer Priming''"), Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), Translate("''Primer Priming''"), Translate(" plate from position 4.\n2. Label the plate with "), Translate("''Primer Priming"), Translate(" plate''."), Translate("\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      l_strLastMessage = StrConcat4(Translate(""), Translate("Reload "), Translate("Primer Priming"), Translate(" plate..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Reload samples"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Reload processed samples."), Translate(""), Translate("\n\nOnce the thermal cycler has been completed, please remove any seal or lid used and place the plate on position 2 on the carrier shown."), Translate(""), Translate("\nWhen ready to continue with the preparation of "), Translate("first strand cDNA synthesis reactions"), Translate(" click 'OK'. "));
      }
      else
      {
        l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Reload processed samples."), Translate(""), Translate("\n\nOnce the thermal cycler has been completed, please remove any seal or lid used and place the plate on position 4 on the carrier shown."), Translate(""), Translate("\nWhen ready to continue with preparation of"), Translate("first strand cDNA synthesis reactions"), Translate(" click 'OK'. "));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      MECC::TraceComment(Translate("============\n\nMove HSP plate to CPAC\n\n============"));
      l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate to CPAC..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      else
      {
        NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
    }
    else
    {
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide.\n4. After the thermal cycler has been completed, it is recommended to continue immediately to the next process as described in the "), t_strMethodName, Translate(" reference guide.\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide.\n4. After the thermal cycler has been completed, it is recommended to continue immediately to the next process as described in the "), t_strMethodName, Translate(" reference guide.\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
    }
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_1 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_1 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  l_strLastMessage = Translate("Mix First-strand synthesis mix...");
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_MixOnly(ML_STAR, t_seqAspirate_FirstStrandMix_distinct, ASWGLOBAL::BOOL::FALSE, Translate("QIAseqRNAFusionXPPanels_300F_FirstStrandSynthesisMixMixing_DispenseSurface_Empty"), 5, ASWGLOBAL::BOOL::FALSE);
  l_strLastMessage = Translate("Adding First-strand synthesis mix...");
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_FirstStrandMix, t_seqHSP_CPAC, t_fltVolumeP01_FSSynthesisRTMix, Translate("QIAseqRNAFusionXPPanels_50F_FirstStrandSynthesisMix_DispenseSurface_Empty"), 10, 0, t_fltVolumeP01_FSSynthesisRTReactionMixing, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  l_strReactionAndPlateName = Translate("First Strand Synthesis Reaction");
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_GetDataFromLastRun(t_intDeviceNumberODTC, l_strProtocolName);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_blnTestODTCWithShortDummyProtocol == ASWGLOBAL::BOOL::TRUE)
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_ReverseTranscription_short");
    }
    else
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_ReverseTranscription");
    }
    l_strLastMessage = StrConcat4(Translate(""), Translate("Running "), l_strProtocolName, Translate(" protocol..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate from ODTC..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
      NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
      NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      else
      {
        NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
      l_strProtocolName = Translate("RNAFusionXPPanel_Block37Lid103");
      l_strLastMessage = StrConcat4(Translate(""), Translate("Running "), l_strProtocolName, Translate(" protocol..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    }
    else
    {
      if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
      {
        l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
        if (t_blnStoreAtRoomTemperature == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold in the ODTC at room temperature"));
        }
        else
        {
          l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold in the ODTC at 12°C"));
        }
        NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
        ProcessX_StoreHSPWithinODTCOverNight(ML_STAR.HSP_Pipette2, t_blnStoreAtRoomTemperature);
      }
      else
      {
        l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
        l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold on deck at room temperature"));
        NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
        l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate from ODTC..."));
        NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
        NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
        NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
      }
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrierMOA.png"));
      }
      else
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrier.png"));
      }
      l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Unload processed samples"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" incubation is now completed. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. It is recommended to continue to the next process as described in the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" incubation is now completed. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. It is recommended to continue to the next process as described in the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        {
          loopCounter1 = 0;
          while (1 == 1)
          {
            loopCounter1 = loopCounter1 + 1;
            onerror goto errLabel_2 ;
            err.Clear();
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            break;
            errLabel_2 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
              NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
              l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            }   /* end if from skip handler if no error */
          }
        }
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
  }
  else
  {
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strReactionAndPlateName, Translate(" plate is prepared."));
    l_strLastMessage = StrConcat8(l_strProcessName, l_strReactionAndPlateName, Translate(" plate is prepared and ready for incubation in an off-deck thermal cycler. The "), l_strReactionAndPlateName, Translate(" plate is hold on the CPAC at 4°C."), Translate(""), Translate(""), Translate(""));
    NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
    l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate for incubation in off-deck thermal cycler..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    l_strHeader = StrConcat2(l_strProcessName, Translate(" - Unload processed samples"));
    l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" plate is prepared and ready for incubation in off-deck thermal cycler."), Translate(""), Translate(""), Translate("\nClick OK to continue."));
    VectorCustomDialogs::MessageDialog(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage);
    MECC::TraceComment(Translate("============\n\nMove HSP plate\n\n============"));
    l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrierMOA.png"));
    }
    else
    {
      l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrier.png"));
    }
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe ''"), l_strReactionAndPlateName, Translate("'' plate is now prepared. Proceed as follows:\n1. Remove the ''"), l_strReactionAndPlateName, Translate("'' plate from position 2.\n2. Label the plate with ''"), l_strReactionAndPlateName, Translate(" plate''."), Translate("\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe ''"), l_strReactionAndPlateName, Translate("'' plate is now prepared. Proceed as follows:\n1. Remove the ''"), l_strReactionAndPlateName, Translate("'' plate from position 4.\n2. Label the plate with ''"), l_strReactionAndPlateName, Translate(" plate''."), Translate("\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      l_strLastMessage = StrConcat4(Translate(""), Translate("Reload "), l_strReactionAndPlateName, Translate(" plate..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Reload samples"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Reload processed samples."), Translate(""), Translate("\n\nOnce the thermal cycler has been completed, please remove any seal or lid used and place the plate on position 2 on the carrier shown."), Translate(""), Translate("\nWhen ready to continue with the preparation of the ''"), l_strNextProcessName, Translate("'' click 'OK'. "));
      }
      else
      {
        l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Reload processed samples."), Translate(""), Translate("\n\nOnce the thermal cycler has been completed, please remove any seal or lid used and place the plate on position 4 on the carrier shown."), Translate(""), Translate("\nWhen ready to continue with preparation of ''"), l_strNextProcessName, Translate("'' click 'OK'. "));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      MECC::TraceComment(Translate("============\n\nMove HSP plate to CPAC\n\n============"));
      l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate to CPAC..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      else
      {
        NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
    }
    else
    {
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe ''"), l_strReactionAndPlateName, Translate("'' plate is now prepared. Proceed as follows:\n1. Remove the ''"), l_strReactionAndPlateName, Translate("'' plate from position 2.\n2. Label the plate with ''"), l_strReactionAndPlateName, Translate(" plate''.\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide.\n4. After the thermal cycler has been completed, it is recommended to continue immediately to the next process as described in the "), t_strMethodName, Translate(" reference guide.\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe ''"), l_strReactionAndPlateName, Translate("'' plate is now prepared. Proceed as follows:\n1. Remove the ''"), l_strReactionAndPlateName, Translate("'' plate from position 4.\n2. Label the plate with ''"), l_strReactionAndPlateName, Translate(" plate''.\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide.\n4. After the thermal cycler has been completed, it is recommended to continue immediately to the next process as described in the "), t_strMethodName, Translate(" reference guide.\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
    }
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_3 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_3 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  l_strLastMessage = StrConcat2(l_str_FunctionName, Translate(" is completed"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
}

private function Process2_SecondStrandSynthesis(  ) void {
  private variable l_str_FunctionName;
  private variable l_strReactionAndPlateName;
  private variable l_strProcessName;
  private variable l_strNextProcessName;
  private variable l_strHeader;
  private variable l_strProtocolName;
  private variable loopCounter1;
  private variable l_strMailSubject;
  private variable l_strReadCurrentBarcode;
  private variable l_strImage;
  private variable l_strReadBarcode;
  private variable l_strLastMessage;
  l_str_FunctionName = Translate("");
  l_str_FunctionName = GetFunctionName();
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(l_str_FunctionName);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_str_FunctionName, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_TipCounterRead_CustomTips(ML_STAR, t_intRequiredNumberOf50uLTipsM2, t_intRequiredNumberOf300uLTipsM2, t_intRequiredNumberOf1000uLTipsM2, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  else
  {
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM2, t_intRequiredNumberOf300uLTipsM2, t_intRequiredNumberOf1000uLTipsM2, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  l_strProcessName = t_arr_strProcessID.ElementAt( 2 -1);
  l_strNextProcessName = t_arr_strProcessID.ElementAt( 3 -1);
  l_strReactionAndPlateName = Translate("''Second Strand Synthesis''");
  MECC::TraceComment(Translate("=============\n\nMove HSP plate to CPAC\n\n============="));
  if (t_intSelectedIndexSTART == 2)
  {
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
    }
  }
  MECC::TraceComment(Translate("=============\n\nAdding Second Strand Synthesis Mix\n\n============="));
  l_strLastMessage = StrConcat4(Translate(""), Translate("Mixing "), l_strReactionAndPlateName, Translate(" Mix before dispense to samples..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_MixOnly(ML_STAR, t_seqAspirate_SecondStrandMix_distinct, 0, Translate("QIAseqRNAFusionXPPanels_1000F_SecondStrandSythesisMixMixing_DispenseSurface_Empty"), 10, t_fltVolumeP02_SecondStrandMixMixing);
  l_strLastMessage = StrConcat4(Translate(""), Translate("Dispense "), l_strReactionAndPlateName, Translate(" Mix to samples..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_SecondStrandMix, t_seqHSP_CPAC, t_fltVolumeP02_SecondStrandSynthMix, Translate("QIAseqRNAFusionXPPanels_50F_SecondStrandSynthesisMix_DispenseSurface_Empty"), 10, 0, t_fltVolumeP02_ReactionMixing, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  MECC::TraceComment(Translate("=============\n\nIncubation in ODTC or off-deck thermal cycler\n\n============="));
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    l_strLastMessage = StrConcat4(Translate(""), Translate("Load "), l_strReactionAndPlateName, Translate(" plate for incubation in ODTC..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_blnTestODTCWithShortDummyProtocol == ASWGLOBAL::BOOL::TRUE)
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_SecondStrandSynthesis_short");
    }
    else
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_SecondStrandSynthesis");
    }
    l_strLastMessage = StrConcat4(Translate(""), Translate("Running "), l_strProtocolName, Translate(" protocol..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_GetDataFromLastRun(t_intDeviceNumberODTC, l_strProtocolName);
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate from ODTC..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
      NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
      NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      else
      {
        NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
      l_strProtocolName = Translate("RNAFusionXPPanel_Block4Lid75");
      l_strLastMessage = StrConcat4(Translate(""), Translate("Running "), l_strProtocolName, Translate(" protocol..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    }
    else
    {
      if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
      {
        l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
        if (t_blnStoreAtRoomTemperature == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold in the ODTC at room temperature"));
        }
        else
        {
          l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold in the ODTC at 12°C"));
        }
        NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
        ProcessX_StoreHSPWithinODTCOverNight(ML_STAR.HSP_Pipette2, t_blnStoreAtRoomTemperature);
      }
      else
      {
        l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
        l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold on deck at room temperature"));
        NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
        l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate from ODTC..."));
        NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
        NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
        NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
      }
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrierMOA.png"));
      }
      else
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrier.png"));
      }
      l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Unload processed samples"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" incubation is now completed. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. It is recommended to continue to the next process as described in the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" incubation is now completed. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. It is recommended to continue to the next process as described in the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        {
          loopCounter1 = 0;
          while (1 == 1)
          {
            loopCounter1 = loopCounter1 + 1;
            onerror goto errLabel_4 ;
            err.Clear();
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            break;
            errLabel_4 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
              NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
              l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            }   /* end if from skip handler if no error */
          }
        }
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
  }
  else
  {
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" reactions are prepared"));
    l_strLastMessage = StrConcat4(l_strReactionAndPlateName, Translate(" are prepared and ready for incubation in off-deck thermal cycler. The "), l_strReactionAndPlateName, Translate(" plate is hold on the CPAC at 4°C"));
    NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
    l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate for incubation in off-deck thermal cycler..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    l_strHeader = StrConcat2(l_strProcessName, Translate(" - Unload prepared reactions"));
    l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Unload prepared reactions."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" plate is prepared and ready for incubation in off-deck thermal cycler."), Translate(""), Translate(""), Translate("\nClick OK to continue."));
    VectorCustomDialogs::MessageDialog(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage);
    MECC::TraceComment(Translate("============\n\nMove HSP plate\n\n============"));
    l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrierMOA.png"));
    }
    else
    {
      l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrier.png"));
    }
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate."), Translate("\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate."), Translate("\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      l_strLastMessage = StrConcat4(Translate(""), Translate("Reload "), l_strReactionAndPlateName, Translate(" plate..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Reload samples"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Reload processed samples."), Translate(""), Translate("\n\nOnce the thermal cycler has been completed, please remove any seal or lid used and place the plate on position 2 on the carrier shown."), Translate(""), Translate("\nWhen ready to continue with ''"), l_strNextProcessName, Translate("'' click 'OK'. "));
      }
      else
      {
        l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Reload processed samples."), Translate(""), Translate("\n\nOnce the thermal cycler has been completed, please remove any seal or lid used and place the plate on position 4 on the carrier shown."), Translate(""), Translate("\nWhen ready to continue with ''"), l_strNextProcessName, Translate("'' click 'OK'. "));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      MECC::TraceComment(Translate("============\n\nMove HSP plate to CPAC\n\n============"));
      l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate to CPAC..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      else
      {
        NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
    }
    else
    {
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide.\n4. After the thermal cycler has been completed, it is recommended to continue immediately to the next process as described in the "), t_strMethodName, Translate(" reference guide.\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide.\n4. After the thermal cycler has been completed, it is recommended to continue immediately to the next process as described in the "), t_strMethodName, Translate(" reference guide.\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
    }
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_5 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_5 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  l_strLastMessage = StrConcat2(l_str_FunctionName, Translate(" is completed"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
}

private function Process3_EndRepairdATailing(  ) void {
  private variable l_str_FunctionName;
  private variable l_strReactionAndPlateName;
  private variable l_strProcessName;
  private variable l_strNextProcessName;
  private variable l_strHeader;
  private variable l_strProtocolName;
  private variable loopCounter1;
  private variable l_strMailSubject;
  private variable l_strReadCurrentBarcode;
  private variable l_strImage;
  private variable l_strReadBarcode;
  private variable l_strLastMessage;
  l_str_FunctionName = Translate("");
  l_str_FunctionName = GetFunctionName();
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(l_str_FunctionName);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_str_FunctionName, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_TipCounterRead_CustomTips(ML_STAR, t_intRequiredNumberOf50uLTipsM3, t_intRequiredNumberOf300uLTipsM3, t_intRequiredNumberOf1000uLTipsM3, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  else
  {
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM3, t_intRequiredNumberOf300uLTipsM3, t_intRequiredNumberOf1000uLTipsM3, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  l_strProcessName = Translate("''Process 3: End Repair and dA-Tailing''");
  l_strNextProcessName = Translate("''Process 4: Adapter Ligation''");
  l_strReactionAndPlateName = Translate("''End Repair And dA Tailing''");
  MECC::TraceComment(Translate("=============\n\nMove HSP plate to CPAC\n\n============="));
  if (t_intSelectedIndexSTART == 3)
  {
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
    }
  }
  MECC::TraceComment(Translate("=============\n\nAdding ERAT Mix to samples\n\n============="));
  l_strLastMessage = StrConcat4(Translate(""), Translate("Mixing "), l_strReactionAndPlateName, Translate(" Mix before dispense to samples..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::CUSTOMIZED_PIP_MixOnly(ML_STAR, t_seqAspirate_ERATMix_distinct, 0, Translate("QIAseqRNAFusionXPPanels_1000F_EndRepairATailingMixMixing_DispenseSurface_Empty"), 10, t_fltVolumeP03_ERATMixTubeMixing);
  l_strLastMessage = StrConcat4(Translate(""), Translate("Dispense "), l_strReactionAndPlateName, Translate(" Mix to samples..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_ERATMix, t_seqHSP_CPAC, t_fltVolumeP03_ERATMix, Translate("QIAseqRNAFusionXPPanels_50F_EndRepairATailingMM_DispenseSurface_Empty"), 10, 0, t_fltVolumeP03_ERATReactionMixing, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  MECC::TraceComment(Translate("=============\n\nIncubation in ODTC or off-deck thermal cycler\n\n============="));
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    l_strLastMessage = StrConcat4(Translate(""), Translate("Load "), l_strReactionAndPlateName, Translate(" plate for incubation in ODTC..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_blnTestODTCWithShortDummyProtocol == ASWGLOBAL::BOOL::TRUE)
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_EndRepairATailing_short");
    }
    else
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_EndRepairATailing");
    }
    l_strLastMessage = StrConcat4(Translate(""), Translate("Running "), l_strProtocolName, Translate(" protocol..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_GetDataFromLastRun(t_intDeviceNumberODTC, l_strProtocolName);
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate from ODTC..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
      NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
      NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      else
      {
        NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
      l_strProtocolName = Translate("RNAFusionXPPanel_KeepBlock4");
      l_strLastMessage = StrConcat4(Translate(""), Translate("Running "), l_strProtocolName, Translate(" protocol..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    }
    else
    {
      if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
      {
        l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
        if (t_blnStoreAtRoomTemperature == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold in the ODTC at room temperature"));
        }
        else
        {
          l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold in the ODTC at 12°C"));
        }
        NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
        ProcessX_StoreHSPWithinODTCOverNight(ML_STAR.HSP_Pipette2, t_blnStoreAtRoomTemperature);
      }
      else
      {
        l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
        l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold on deck at room temperature"));
        NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
        l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate from ODTC..."));
        NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
        NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
        NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
        NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
      }
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrierMOA.png"));
      }
      else
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrier.png"));
      }
      l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Unload processed samples"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" incubation is now completed. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. It is recommended to continue to the next process as described in the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" incubation is now completed. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. It is recommended to continue to the next process as described in the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        {
          loopCounter1 = 0;
          while (1 == 1)
          {
            loopCounter1 = loopCounter1 + 1;
            onerror goto errLabel_6 ;
            err.Clear();
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            break;
            errLabel_6 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
              NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
              l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            }   /* end if from skip handler if no error */
          }
        }
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
  }
  else
  {
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" is prepared"));
    l_strLastMessage = StrConcat4(l_strProcessName, Translate(" reactions are prepared and ready for incubation in off-deck thermal cycler. The "), l_strReactionAndPlateName, Translate(" plate is hold on the CPAC at 4°C"));
    NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
    l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate for incubation in off-deck thermal cycler..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    l_strHeader = StrConcat2(l_strProcessName, Translate(" - Unload prepared reactions"));
    l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Unload prepared reactions."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" plate is prepared and ready for incubation in off-deck thermal cycler."), Translate(""), Translate(""), Translate("\nClick OK to continue."));
    VectorCustomDialogs::MessageDialog(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage);
    MECC::TraceComment(Translate("============\n\nMove HSP plate\n\n============"));
    l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrierMOA.png"));
    }
    else
    {
      l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrier.png"));
    }
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate."), Translate("\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate."), Translate("\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      l_strLastMessage = StrConcat4(Translate(""), Translate("Reload "), l_strReactionAndPlateName, Translate(" plate..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Reload processed samples"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Reload processed samples."), Translate(""), Translate("\n\nOnce the thermal cycler has been completed, please remove any seal or lid used and place the plate on position 2 on the carrier shown."), Translate(""), Translate("\nWhen ready to continue with "), l_strNextProcessName, Translate(" click 'OK'. "));
      }
      else
      {
        l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Reload processed samples."), Translate(""), Translate("\n\nOnce the thermal cycler has been completed, please remove any seal or lid used and place the plate on position 4 on the carrier shown."), Translate(""), Translate("\nWhen ready to continue with "), l_strNextProcessName, Translate(" click 'OK'. "));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      MECC::TraceComment(Translate("============\n\nMove HSP plate to CPAC\n\n============"));
      l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate to CPAC..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      else
      {
        NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
    }
    else
    {
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide.\n4. After the thermal cycler has been completed, it is recommended to continue immediately to the next process as described in the "), t_strMethodName, Translate(" reference guide.\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide.\n4. After the thermal cycler has been completed, it is recommended to continue immediately to the next process as described in the "), t_strMethodName, Translate(" reference guide.\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
    }
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_7 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_7 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  l_strLastMessage = StrConcat2(l_str_FunctionName, Translate(" is completed"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
}

private function Process5_SampleCleanup1(  ) void {
  private variable l_str_FunctionName;
  private variable l_strReactionAndPlateName;
  private variable l_strProcessName;
  private variable l_strNextProcessName;
  private variable l_strHeader;
  private variable l_strProtocolName;
  private variable loopCounter1;
  private variable l_strMailSubject;
  private variable l_strReadCurrentBarcode;
  private variable l_strImage;
  private variable l_strLastMessage;
  l_str_FunctionName = Translate("");
  l_str_FunctionName = GetFunctionName();
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(l_str_FunctionName);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_str_FunctionName, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_TipCounterRead_CustomTips(ML_STAR, t_intRequiredNumberOf50uLTipsM5, t_intRequiredNumberOf300uLTipsM5, t_intRequiredNumberOf1000uLTipsM5, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  else
  {
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM5, t_intRequiredNumberOf300uLTipsM5, t_intRequiredNumberOf1000uLTipsM5, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  l_strProcessName = t_arr_strProcessID.ElementAt( 5 -1);
  l_strNextProcessName = t_arr_strProcessID.ElementAt( 6 -1);
  l_strReactionAndPlateName = Translate("Sample CleanUp 1");
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpHHS3_MIDI, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
  SeqIncrement(t_trp_Stack1, 1);
  l_strLastMessage = StrConcat4(Translate(""), Translate("Mix QIASeq Beads by pipetting before dispense. "), Translate(""), Translate(""));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_MixOnly(ML_STAR, t_seqAspirate_QIAseqBeads, 0, Translate("QIAseqRNAFusionXPPanels_1000F_AMPureBeadsMixing_SurfaceEmpty"), 10, 0);
  NGSSTARPROCESSES::CUSTOMIZED_PIP_ReagentsFromTubeOrTroughOrPlateToPlate_ConsecutiveAspiration_2reagents(ML_STAR, t_seqAspirate_QIAseqBeads, t_seqHSP_CPAC, t_seqHHS3_MIDI, t_fltVolumeP05_QIAseqBeads1, t_fltVolumeP05_ReactionProduct, Translate("QIAseqRNAFusionXPPanels_300F_NucleaseFreeWater_DispenseSurface_Empty"), Translate("QIAseqRNAFusionXPPanels_300F_Beads_DispenseSurface_Empty"), 0, 0, 0, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::CUSTOMIZED_Process_Cleanup_MPH_MOA_P5(ML_STAR, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.MPH_LiquidWaste, t_seqAspirate_Water, t_fltVolumeP05_Ethanol, t_fltVolumeP05_NucleaseFreeWater_FirstElution, t_fltVolumeP05_FirstSupernatant1, Translate("QIAseqRNAFusionXPPanels_1000F_Ethanol80_JetPart"), Translate("QIAseqRNAFusionXPPanels_50F_NucleaseFreeWater_DispenseSurface_Empty"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_Supernatant_DispenseJet"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_EthanolSupernatant_JetEmpty"), Translate("QIAseqRNAFusionXPPanels_50F_EtOH_DispenseJet_Empty"), 1400, 1400, 300, 300, t_intHHS3_HSP3_MIDI3, 300, 300, 600, 300, 300, t_intNumberOfSamplesFromFile, t_blnRemoveEthanolSupernatantWith50ulTips);
    }
    else
    {
      NGSSTARPROCESSES::CUSTOMIZED_Process_Cleanup_MPH_P5(ML_STAR, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqAspirate_Water, t_fltVolumeP05_Ethanol, t_fltVolumeP05_NucleaseFreeWater_FirstElution, t_fltVolumeP05_FirstSupernatant1, Translate("QIAseqRNAFusionXPPanels_1000F_Ethanol80_JetPart"), Translate("QIAseqRNAFusionXPPanels_50F_NucleaseFreeWater_DispenseSurface_Empty"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_Supernatant_DispenseJet"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_EthanolSupernatant_JetEmpty"), Translate("QIAseqRNAFusionXPPanels_50F_EtOH_DispenseJet_Empty"), 1400, 1400, 300, 300, t_intHHS3_HSP3_MIDI3, 300, 300, 600, 300, 300, t_intNumberOfSamplesFromFile, t_blnRemoveEthanolSupernatantWith50ulTips);
    }
  }
  else
  {
    NGSSTARPROCESSES::CUSTOMIZED_Process_CleanUp_P5(ML_STAR, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqAspirate_Water, t_fltVolumeP05_Ethanol, t_fltVolumeP05_NucleaseFreeWater_FirstElution, t_fltVolumeP05_FirstSupernatant1, Translate("QIAseqRNAFusionXPPanels_1000F_Ethanol80_JetPart"), Translate("QIAseqRNAFusionXPPanels_50F_NucleaseFreeWater_DispenseSurface_Empty"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_Supernatant_DispenseJet"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_EthanolSupernatant_JetEmpty"), Translate("QIAseqRNAFusionXPPanels_50F_EtOH_DispenseJet_Empty"), 1400, 1400, 300, 300, t_intColumnsToProcessPerBatch, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::TRUE, 300, 300, 600, 300, 300, t_blnRemoveEthanolSupernatantWith50ulTips);
  }
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_MixOnly(ML_STAR, t_seqAspirate_QIAseqBeads, 0, Translate("QIAseqRNAFusionXPPanels_1000F_AMPureBeadsMixing_SurfaceEmpty"), 10, 0);
  }
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_QIAseqBeads, t_seqHHS3_MIDI, t_fltVolumeP05_QIAseqBeads2, Translate("QIAseqRNAFusionXPPanels_300F_Beads_DispenseSurface_Empty"), 0, 0, 0, 0, 8, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::CUSTOMIZED_Process_Cleanup_MPH_MOA_P7AndP9(ML_STAR, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.MPH_LiquidWaste, t_seqAspirate_Water, t_fltVolumeP05_Ethanol, t_fltVolumeP05_NucleaseFreeWater_SecondElution, t_fltVolumeP05_FirstSupernatant2, Translate("QIAseqRNAFusionXPPanels_1000F_Ethanol80_JetPart"), Translate("QIAseqRNAFusionXPPanels_50F_NucleaseFreeWater_DispenseSurface_Empty"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_Supernatant_DispenseJet"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_EthanolSupernatant_JetEmpty"), Translate("QIAseqRNAFusionXPPanels_50F_EtOH_DispenseJet_Empty"), 1400, 1400, 300, 300, t_intHHS3_HSP3_MIDI3, 300, 300, 600, 300, 300, t_intNumberOfSamplesFromFile, t_blnRemoveEthanolSupernatantWith50ulTips);
    }
    else
    {
      NGSSTARPROCESSES::CUSTOMIZED_Process_Cleanup_MPH_P7AndP9(ML_STAR, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqAspirate_Water, t_fltVolumeP05_Ethanol, t_fltVolumeP05_NucleaseFreeWater_SecondElution, t_fltVolumeP05_FirstSupernatant2, Translate("QIAseqRNAFusionXPPanels_1000F_Ethanol80_JetPart"), Translate("QIAseqRNAFusionXPPanels_50F_NucleaseFreeWater_DispenseSurface_Empty"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_Supernatant_DispenseJet"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_EthanolSupernatant_JetEmpty"), Translate("QIAseqRNAFusionXPPanels_50F_EtOH_DispenseJet_Empty"), 1400, 1400, 300, 300, t_intHHS3_HSP3_MIDI3, 300, 300, 600, 300, 300, t_intNumberOfSamplesFromFile, t_blnRemoveEthanolSupernatantWith50ulTips);
    }
  }
  else
  {
    NGSSTARPROCESSES::CUSTOMIZED_Process_CleanUp_P7AndP9(ML_STAR, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqAspirate_Water, t_fltVolumeP05_Ethanol, t_fltVolumeP05_NucleaseFreeWater_SecondElution, t_fltVolumeP05_FirstSupernatant2, Translate("QIAseqRNAFusionXPPanels_1000F_Ethanol80_JetPart"), Translate("QIAseqRNAFusionXPPanels_50F_NucleaseFreeWater_DispenseSurface_Empty"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_Supernatant_DispenseJet"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_EthanolSupernatant_JetEmpty"), Translate("QIAseqRNAFusionXPPanels_50F_EtOH_DispenseJet_Empty"), 1400, 1400, 300, 300, t_intColumnsToProcessPerBatch, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::TRUE, 300, 300, 600, 300, 300, t_blnRemoveEthanolSupernatantWith50ulTips);
  }
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_trpHSP_Pipette2, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltVolumeP05_2ndEluat, Translate("QIAseqRNAFusionXPPanels_50F_CleanSample_SlowerAspiration_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 0.3, 0.5, 0, 0);
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltVolumeP05_2ndEluat, Translate("QIAseqRNAFusionXPPanels_50F_CleanSample_SlowerAspiration_SurfaceEmpty"), 0, 0, 0, 0.3, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Waste, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, l_strReadCurrentBarcode, 4);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Waste, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
  if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_strLastMessage = StrConcat4(Translate(""), Translate("Transport "), Translate("''purified ligation reactions''"), Translate(" plate..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
  }
  MECC::TraceComment(Translate("=============\n\nIncubation in ODTC or off-deck thermal cycler\n\n============="));
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
      l_strProtocolName = Translate("RNAFusionXPPanel_Preheat95CLid110C");
      l_strLastMessage = StrConcat4(Translate(""), Translate("Running "), l_strProtocolName, Translate(" protocol..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    }
    else
    {
      if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
      {
        l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
        if (t_blnStoreAtRoomTemperature == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold in the ODTC at room temperature"));
        }
        else
        {
          l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold in the ODTC at 12°C"));
        }
        NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
        ProcessX_StoreHSPWithinODTCOverNight(ML_STAR.HSP_Pipette2, t_blnStoreAtRoomTemperature);
      }
      else
      {
        l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
        l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold on deck at room temperature"));
        NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
      }
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrierMOA.png"));
      }
      else
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrier.png"));
      }
      l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Unload processed samples"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" incubation is now completed. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. It is recommended to continue to the next process as described in the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" incubation is now completed. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. It is recommended to continue to the next process as described in the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        {
          loopCounter1 = 0;
          while (1 == 1)
          {
            loopCounter1 = loopCounter1 + 1;
            onerror goto errLabel_8 ;
            err.Clear();
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            break;
            errLabel_8 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
              NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
              l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            }   /* end if from skip handler if no error */
          }
        }
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
  }
  else
  {
    if(0){
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrierMOA.png"));
      }
      else
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrier.png"));
      }
    }
    if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" is prepared"));
      l_strLastMessage = StrConcat4(l_strProcessName, Translate(" is prepared and ready for incubation in off-deck thermal cycler. The "), l_strReactionAndPlateName, Translate(" plate is hold on the CPAC at 4°C"));
      NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
      l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate for incubation in off-deck thermal cycler..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Unload processed samples"));
      l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" is complete and ready to unload.."), Translate("\n\n Please store the purified samples at -20°C for up to 24 hours."), Translate(""), Translate("\n\nClick OK to continue."));
      VectorCustomDialogs::MessageDialog(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrierMOA.png"));
      }
      else
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrier.png"));
      }
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - plate storage.\n\nThe "), l_strReactionAndPlateName, Translate(" is now completed. Proceed as follows:\n1. Remove the plate containing the "), Translate("purified samples"), Translate(" from position 2.\n2. Label the plate with "), Translate("'purified ligation reactions'"), Translate(" plate.\n3. Store the plate for at -20°C for up to 24 hours."), Translate(""), Translate(""), Translate(""), Translate("\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - plate storage.\n\nThe "), l_strReactionAndPlateName, Translate(" is now completed. Proceed as follows:\n1. Remove the plate containing the "), Translate("purified samples"), Translate(" from position 4.\n2. Label the plate with "), Translate("'purified ligation reactions'"), Translate(" plate.\n3. Store the plate for at -20°C for up to 24 hours."), Translate(""), Translate(""), Translate(""), Translate(" \n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
    }
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_9 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_9 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  l_strLastMessage = StrConcat2(l_str_FunctionName, Translate(" is completed"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
}

private function Process6_SPETargetEnrichment(  ) void {
  private variable l_str_FunctionName;
  private variable l_strReactionAndPlateName;
  private variable l_strProcessName;
  private variable l_strNextProcessName;
  private variable l_strHeader;
  private variable l_strProtocolName;
  private variable loopCounter1;
  private variable l_strMailSubject;
  private variable l_strReadCurrentBarcode;
  private variable l_strImage;
  private variable l_strReadBarcode;
  private variable l_strLastMessage;
  l_str_FunctionName = Translate("");
  l_str_FunctionName = GetFunctionName();
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(l_str_FunctionName);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_str_FunctionName, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_TipCounterRead_CustomTips(ML_STAR, t_intRequiredNumberOf50uLTipsM6, t_intRequiredNumberOf300uLTipsM6, t_intRequiredNumberOf1000uLTipsM6, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  else
  {
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM6, t_intRequiredNumberOf300uLTipsM6, t_intRequiredNumberOf1000uLTipsM6, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  l_strProcessName = Translate("SPE Target Enrichment");
  l_strNextProcessName = t_arr_strProcessID.ElementAt( 7 -1);
  l_strReactionAndPlateName = Translate("''SPE Target Enrichment''");
  MECC::TraceComment(Translate("=============\n\nMove HSP plate to CPAC\n\n============="));
  if (t_intSelectedIndexSTART == 6)
  {
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
    }
  }
  MECC::TraceComment(Translate("=============\n\nMix QIAseq RNA Fusion XP Panel Mix before adding to samples\n\n============="));
  l_strLastMessage = StrConcat2(Translate(""), Translate("Mixing RNA Fusion XP Panels..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqAspirate_MixSPEPanels);
  NGSSTARPROCESSES::CUSTOMIZED_PIP_MixOnly_WithVolumeArrays(ML_STAR, t_seqAspirate_MixSPEPanels, ASWGLOBAL::BOOL::FALSE, Translate("QIAseqRNAFusionXPPanels_1000F_FusionXPPanelMixing_SurfaceEmpty"), 5, t_arr_fltReagentMixingVolumesOnAdapterTubeCarrier_FusionXPPanel);
  MECC::TraceComment(Translate("=============\n\nAdding QIAseq RNA Fusion XP Panel\n\n============="));
  l_strLastMessage = StrConcat2(Translate(""), Translate("Adding RNA Fusion XP Panel..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqAspirate_QIAseqRNAFusionXPPanelAll);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_QIAseqRNAFusionXPPanelAll, t_seqHSP_CPAC, t_fltVolumeP06_SPEReactionMix, Translate("QIAseqRNAFusionXPPanel_50F_SPEReactionMix_DispenseSurface_Empty"), 10, 0, t_fltVolumeP06_SPEReactionMixing, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  MECC::TraceComment(Translate("=============\n\nIncubation in ODTC or off-deck thermal cycler\n\n============="));
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    l_strLastMessage = StrConcat4(Translate(""), Translate("Load "), l_strReactionAndPlateName, Translate(" plate for incubation in ODTC..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_blnTestODTCWithShortDummyProtocol == ASWGLOBAL::BOOL::TRUE)
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_TargetEnrichment_8Cycles_short");
    }
    else
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_TargetEnrichment_8Cycles");
    }
    l_strLastMessage = StrConcat4(Translate(""), Translate("Running "), l_strProtocolName, Translate(" protocol..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_GetDataFromLastRun(t_intDeviceNumberODTC, l_strProtocolName);
    if (t_arrBlnProcessActivation.ElementAt( 7 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate from ODTC..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
      NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
      NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      else
      {
        NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    }
    else
    {
      if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
      {
        l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
        if (t_blnStoreAtRoomTemperature == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold in the ODTC at room temperature"));
        }
        else
        {
          l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold in the ODTC at 12°C"));
        }
        NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
        ProcessX_StoreHSPWithinODTCOverNight(ML_STAR.HSP_Pipette2, t_blnStoreAtRoomTemperature);
      }
      else
      {
        l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
        l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold on deck at room temperature"));
        NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
        l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate from ODTC..."));
        NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
        NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
        NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
      }
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrierMOA.png"));
      }
      else
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrier.png"));
      }
      l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Unload processed samples"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" incubation is now completed. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. It is recommended to continue to the next process as described in the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" incubation is now completed. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. It is recommended to continue to the next process as described in the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        {
          loopCounter1 = 0;
          while (1 == 1)
          {
            loopCounter1 = loopCounter1 + 1;
            onerror goto errLabel_10 ;
            err.Clear();
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            break;
            errLabel_10 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
              NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
              l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            }   /* end if from skip handler if no error */
          }
        }
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
  }
  else
  {
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" is prepared"));
    l_strLastMessage = StrConcat4(l_strProcessName, Translate(" is prepared and ready for incubation in off-deck thermal cycler. The "), l_strReactionAndPlateName, Translate(" plate is hold on the CPAC at 4°C"));
    NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
    l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate for incubation in off-deck thermal cycler..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    l_strHeader = StrConcat2(l_strProcessName, Translate(" - Unload processed samples"));
    l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" plate is prepared and ready for incubation in off-deck thermal cycler."), Translate(""), Translate(""), Translate("\nClick OK to continue."));
    VectorCustomDialogs::MessageDialog(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage);
    MECC::TraceComment(Translate("============\n\nMove HSP plate\n\n============"));
    l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrierMOA.png"));
    }
    else
    {
      l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrier.png"));
    }
    if (t_arrBlnProcessActivation.ElementAt( 7 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate."), Translate("\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate."), Translate("\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      l_strLastMessage = StrConcat4(Translate(""), Translate("Reload "), l_strReactionAndPlateName, Translate(" plate..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Reload samples"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Reload processed samples."), Translate(""), Translate("\n\nOnce the thermal cycler has been completed, please remove any seal or lid used and place the plate on position 2 on the carrier shown."), Translate(""), Translate("\nWhen ready to continue with "), l_strNextProcessName, Translate(" click 'OK'. "));
      }
      else
      {
        l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Reload processed samples."), Translate(""), Translate("\n\nOnce the thermal cycler has been completed, please remove any seal or lid used and place the plate on position 4 on the carrier shown."), Translate(""), Translate("\nWhen ready to continue with "), l_strNextProcessName, Translate(" click 'OK'. "));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      MECC::TraceComment(Translate("============\n\nMove HSP plate to CPAC\n\n============"));
      l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate to CPAC..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      else
      {
        NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
    }
    else
    {
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide.\n4. After the thermal cycler has been completed, it is recommended to continue immediately to the next process as described in the "), t_strMethodName, Translate(" reference guide.\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide.\n4. After the thermal cycler has been completed, it is recommended to continue immediately to the next process as described in the "), t_strMethodName, Translate(" reference guide.\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
    }
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_11 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_11 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  l_strLastMessage = StrConcat2(l_str_FunctionName, Translate(" is completed"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
}

private function Process7_SampleCleanup2(  ) void {
  private variable l_str_FunctionName;
  private variable l_strProcessName;
  private variable l_strReactionAndPlateName;
  private variable l_strNextProcessName;
  private variable l_strReadBarcode;
  private variable l_strHeader;
  private variable l_strProtocolName;
  private variable loopCounter1;
  private variable l_strMailSubject;
  private variable l_strReadCurrentBarcode;
  private variable l_strImage;
  private variable l_strLastMessage;
  private variable l_intNumberOfIndexSet1;
  private variable l_strIndexSet;
  l_str_FunctionName = Translate("");
  l_str_FunctionName = GetFunctionName();
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(l_str_FunctionName);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_str_FunctionName, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_TipCounterRead_CustomTips(ML_STAR, t_intRequiredNumberOf50uLTipsM7, t_intRequiredNumberOf300uLTipsM7, t_intRequiredNumberOf1000uLTipsM7, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  else
  {
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM7, t_intRequiredNumberOf300uLTipsM7, t_intRequiredNumberOf1000uLTipsM7, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  l_strProcessName = t_arr_strProcessID.ElementAt( 7 -1);
  l_strNextProcessName = t_arr_strProcessID.ElementAt( 8 -1);
  l_strReactionAndPlateName = Translate("''Sample Cleanup 2''");
  if (t_blnPostponedPrimerLoading == ASWGLOBAL::BOOL::TRUE)
  {
    MECC::TraceComment(Translate("============\n\nLoad QIAseq Targeted DNA Pro UDI Index plate\n\n============"));
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    l_strLastMessage = StrConcat4(Translate(""), Translate("Load "), Translate("QIAseq UDI Index Primer"), Translate(" plate..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    l_strIndexSet=t_arrListOfIndexSets.GetAt(1-1);
    l_strHeader = StrConcat2(l_strProcessName, Translate(" - Load QIAseq UDI Index Primer plate"));
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("CPAC_RGT_Carrier.png"));
    }
    else
    {
      l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("CPACCarrier.png"));
    }
    l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Load QIAseq UDI Index Primer plate."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" plate is currently in preparation."), Translate("\n"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    l_strLastMessage = StrConcat4(l_strLastMessage, Translate("\nPlease load the QIAseq UDI Index Plate plate "), l_strIndexSet, Translate(" on position 1 of the carrier shown."));
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, l_strLastMessage, 1, ML_STAR.HHS1_HSP, 0);
    if (t_intOneOrTwoIndexSets == 2)
    {
      l_strIndexSet=t_arrListOfIndexSets.GetAt(2-1);
      l_strLastMessage = StrConcat4(l_strLastMessage, Translate("\nPlease load the QIAseq UDI Index Plate plate "), l_strIndexSet, Translate(" on position 2 of the carrier shown."));
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, l_strLastMessage, 1, ML_STAR.HHS2_HSP, 0);
    }
    l_strLastMessage = StrConcat4(l_strLastMessage, Translate("\n\nClick OK to continue."), Translate(""), Translate(""));
    VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_12 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_12 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  if (t_intSelectedIndexSTART == 7)
  {
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
    }
  }
  MECC::TraceComment(Translate("============\n\nDownstack MIDI plate\n\n============"));
  l_strLastMessage = StrConcat2(Translate(""), Translate("Downstack MIDI plate..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpMIDI_Pipette, 0, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
  SeqIncrement(t_trp_Stack1, 1);
  NGSSTARPROCESSES::PIP_MixOnly(ML_STAR, t_seqAspirate_QIAseqBeads, 0, Translate("QIAseqRNAFusionXPPanels_1000F_AMPureBeadsMixing_SurfaceEmpty"), 10, 0);
  l_strLastMessage = Translate("Transfer nuclease-free water and beads to MIDI");
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::CUSTOMIZED_PIP_ReagentsFromTubeOrTroughOrPlateToPlate_ConsecutiveAspiration_2reagents(ML_STAR, t_seqAspirate_Water, t_seqAspirate_QIAseqBeads, t_seqMIDI_Pipette, t_fltVolumeP07_NucleaseFreeWater, t_fltVolumeP07_QIAseqBeads, Translate("QIAseqRNAFusionXPPanels_300F_NucleaseFreeWater_DispenseSurface_Empty"), Translate("QIAseqRNAFusionXPPanels_300F_Beads_DispenseSurface_Empty"), 0, 0, 0, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  l_strLastMessage = StrConcat2(Translate(""), Translate("Transferring SPE Enrichment reaction to MIDI..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("============\n\nMove HSP plate\n\n============"));
      l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, t_fltVolumeP07_SPEReaction, Translate("QIAseqRNAFusionXPPanels_MPH_50F_CleanSample_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 10, 0, 50, 0.5, 0, 0, 0);
    }
    else
    {
      if(0){
        MECC::TraceComment(Translate("============\n\nMove HSP plate\n\n============"));
        l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate..."));
        NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
        NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
        NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, t_fltVolumeP07_SPEReaction, Translate("QIAseqRNAFusionXPPanels_MPH_50F_CleanSample_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 10, 0, 50, 0.5, 0.75, 0, 0);
      }
    }
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_CPAC, t_seqMIDI_Pipette, t_fltVolumeP07_SPEReaction, Translate("QIAseqRNAFusionXPPanels_50F_CleanSample_SurfaceEmpty"), 10, 0, 50, 0.5, 0.75, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  }
  MECC::TraceComment(Translate("============\n\nUpstack HSP plate\n\n============"));
  l_strLastMessage = StrConcat2(Translate(""), Translate("Upstack HSP plate..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_Waste, 0, 0, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_Waste, 0, 0, l_strReadBarcode, 4);
    }
  }
  else
  {
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Waste, 0, 0, l_strReadBarcode, 4);
  }
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_seqMIDI_Pipette, t_trpHHS3_MIDI, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::CUSTOMIZED_Process_Cleanup_MPH_MOA_P7AndP9(ML_STAR, t_trpHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.MPH_LiquidWaste, t_seqAspirate_Water, t_fltVolumeP07_Ethanol, t_fltVolumeP07_WaterForElution, t_fltVolumeP07_FirstSupernatant, Translate("QIAseqRNAFusionXPPanels_1000F_Ethanol80_JetPart"), Translate("QIAseqRNAFusionXPPanels_50F_NucleaseFreeWater_DispenseSurface_Empty"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_Supernatant_DispenseJet"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_EthanolSupernatant_JetEmpty"), Translate("QIAseqRNAFusionXPPanels_50F_EtOH_DispenseJet_Empty"), 1400, 1400, 300, 300, t_intHHS3_HSP3_MIDI3, 300, 300, 600, 300, 300, t_intNumberOfSamplesFromFile, ASWGLOBAL::BOOL::FALSE);
    }
    else
    {
      NGSSTARPROCESSES::CUSTOMIZED_Process_CleanUp_P7AndP9(ML_STAR, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqAspirate_Water, t_fltVolumeP07_Ethanol, t_fltVolumeP07_WaterForElution, t_fltVolumeP07_FirstSupernatant, Translate("QIAseqRNAFusionXPPanels_1000F_Ethanol80_JetPart"), Translate("QIAseqRNAFusionXPPanels_50F_NucleaseFreeWater_DispenseSurface_Empty"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_Supernatant_DispenseJet"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_EthanolSupernatant_JetEmpty"), Translate("QIAseqRNAFusionXPPanels_50F_EtOH_DispenseJet_Empty"), 1400, 1400, 300, 300, 6, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::TRUE, 300, 300, 600, 300, 300, ASWGLOBAL::BOOL::FALSE);
    }
  }
  else
  {
    NGSSTARPROCESSES::CUSTOMIZED_Process_CleanUp_P7AndP9(ML_STAR, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqAspirate_Water, t_fltVolumeP07_Ethanol, t_fltVolumeP07_WaterForElution, t_fltVolumeP07_FirstSupernatant, Translate("QIAseqRNAFusionXPPanels_1000F_Ethanol80_JetPart"), Translate("QIAseqRNAFusionXPPanels_50F_NucleaseFreeWater_DispenseSurface_Empty"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_Supernatant_DispenseJet"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_EthanolSupernatant_JetEmpty"), Translate("QIAseqRNAFusionXPPanels_50F_EtOH_DispenseJet_Empty"), 1400, 1400, 300, 300, 6, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::TRUE, 300, 300, 600, 300, 300, ASWGLOBAL::BOOL::FALSE);
  }
  l_strLastMessage = StrConcat2(Translate(""), Translate("Transfer purified Samples tp UDI Index Primer plate..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHHS1_HSP_IndexPrimerSet1, t_fltVolumeP07_Eluat, Translate("QIAseqRNAFusionXPPanels_50F_ElutedDNA_SlowAsp_DispenseSurface_Empty"), 0, 0, 0, 0.3, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  if (t_intOneOrTwoIndexSets == 2)
  {
    l_intNumberOfIndexSet1=t_arrIndex1PositionIDs.GetSize();
    SeqIncrement(t_seqMIDI_OnMagnet, l_intNumberOfIndexSet1);
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHHS2_HSP_IndexPrimerSet2, t_fltVolumeP07_Eluat, Translate("QIAseqRNAFusionXPPanels_50F_ElutedDNA_SlowAsp_DispenseSurface_Empty"), 0, 0, 0, 0.3, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Waste, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, l_strReadCurrentBarcode, 4);
  if (t_arrBlnProcessActivation.ElementAt( 8 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      l_strLastMessage = StrConcat4(Translate(""), Translate("Prepare ODTC for "), l_strNextProcessName, Translate(" reaction..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
      l_strProtocolName = Translate("RNAFusionXPPanel_Preheat95CLid110C");
      l_strLastMessage = StrConcat4(Translate(""), Translate("Running "), l_strProtocolName, Translate(" protocol..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    }
  }
  else
  {
    l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
    l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. \n\nThe "), Translate("purified SPE Enriched samples were transfered to the ''index primer'' plate."), Translate("\n\n The plate is on hold on the HHS at room temperature."));
    NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("CPACCarrier.png"));
    l_strHeader = StrConcat2(l_strProcessName, Translate(" - completed."));
    l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - storage of output plate. \n\nThe "), l_strReactionAndPlateName, Translate(" is now complete. The output plate can be stored. Proceed as follows:\n1. Remove the "), Translate("''index primer'' plate containing the purified samples"), Translate(" from position 1 of the indicated carrier.\n2. Label the plate with "), Translate("''index primer plate with samples''"), Translate(".\n3. Store the plate until further use. \n\nIt is recommended to continue immediately to the next process "), l_strNextProcessName, Translate(".\n\n"), Translate("Click OK to continue."), Translate(""));
    VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_13 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_13 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  l_strLastMessage = StrConcat2(l_str_FunctionName, Translate(" is completed"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
}

private function Process8_UniversalPCR(  ) void {
  private variable l_str_FunctionName;
  private variable l_strReactionAndPlateName;
  private variable l_strProcessName;
  private variable l_strNextProcessName;
  private variable l_strHeader;
  private variable loopCounter1;
  private variable l_strMailSubject;
  private variable l_strReadCurrentBarcode;
  private variable l_strImage;
  private variable l_strReadBarcode;
  private variable l_intNumberOfIndexSet1;
  private variable l_strLastMessage;
  l_str_FunctionName = Translate("");
  l_str_FunctionName = GetFunctionName();
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(l_str_FunctionName);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_str_FunctionName, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_TipCounterRead_CustomTips(ML_STAR, t_intRequiredNumberOf50uLTipsM8, t_intRequiredNumberOf300uLTipsM8, t_intRequiredNumberOf1000uLTipsM8, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  else
  {
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM8, t_intRequiredNumberOf300uLTipsM8, t_intRequiredNumberOf1000uLTipsM8, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  l_strProcessName = t_arr_strProcessID.ElementAt( 8 -1);
  l_strNextProcessName = t_arr_strProcessID.ElementAt( 9 -1);
  l_strReactionAndPlateName = Translate("''Universal PCR''");
  MECC::TraceComment(Translate("=============\n\nMove HSP plate to CPAC\n\n============="));
  if (t_intSelectedIndexSTART == 8)
  {
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
    }
  }
  l_strLastMessage = StrConcat2(Translate(""), Translate("Adding Universal PCR Mix to Index Primer plates..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_UniversalPCRMix, t_seqHHS1_HSP_IndexPrimerSet1, t_fltVolumeP08_UPCRMix, Translate("QIAseqRNAFusionXPPanels_50F_UPCRMix_DispenseSurface_Empty"), 10, 0, t_fltVolumeP08_ReactionMixing, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if (t_intOneOrTwoIndexSets == 2)
  {
    l_intNumberOfIndexSet1=t_arrIndex1PositionIDs.GetSize();
    SeqIncrement(t_seqHSP_CPAC, l_intNumberOfIndexSet1);
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_UniversalPCRMix, t_seqHHS2_HSP_IndexPrimerSet2, t_fltVolumeP08_UPCRMix, Translate("QIAseqRNAFusionXPPanels_50F_UPCRMix_DispenseSurface_Empty"), 10, 0, t_fltVolumeP08_ReactionMixing, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_trpHSP_CPAC, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, l_strReadCurrentBarcode, 4);
  SeqIncrement(t_trp_Stack4, 1);
  MECC::TraceComment(Translate("=============\n\nTransfer Universal PCR reaction to HSP plate\n\n============="));
  l_strLastMessage = StrConcat4(Translate(""), Translate("Transfering Universal PCR reaction to HSP... "), Translate(" "), Translate(" "));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate_AspControling(ML_STAR, t_seqHHS1_HSP_IndexPrimerSet1, t_seqHSP_CPAC, t_fltVolumeP08_UPCRReaction, Translate("QIAseqRNAFusionXPPanels_300F_UPCRReaction_DispenseSurface_Empty"), ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, 0.3, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("+-+-+-+-+ t_intOneOrTwoIndexSets:   "), t_intOneOrTwoIndexSets);
  if (t_intOneOrTwoIndexSets == 2)
  {
    l_intNumberOfIndexSet1=t_arrIndex1PositionIDs.GetSize();
    SeqIncrement(t_seqHSP_CPAC, l_intNumberOfIndexSet1);
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate_AspControling(ML_STAR, t_seqHHS2_HSP_IndexPrimerSet2, t_seqHSP_CPAC, t_fltVolumeP08_UPCRReaction, Translate("QIAseqRNAFusionXPPanels_300F_UPCRReaction_DispenseSurface_Empty"), ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, 0.3, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  }
  MECC::TraceComment(Translate("=============\n\nIncubation in ODTC or off-deck thermal cycler\n\n============="));
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    l_strLastMessage = StrConcat4(Translate(""), Translate("Load "), l_strReactionAndPlateName, Translate(" plate for incubation in ODTC..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    l_strLastMessage = StrConcat4(Translate(""), Translate("Running "), t_strPCRProgramODTC, Translate(" protocol..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, t_strPCRProgramODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_GetDataFromLastRun(t_intDeviceNumberODTC, t_strPCRProgramODTC);
    if (t_arrBlnProcessActivation.ElementAt( 9 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate from ODTC..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
      if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
      }
      else
      {
        NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
      }
      NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      else
      {
        NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
      }
    }
    else
    {
      if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
      {
        l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
        if (t_blnStoreAtRoomTemperature == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold in the ODTC at room temperature"));
        }
        else
        {
          l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold in the ODTC at 12°C"));
        }
        NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
        ProcessX_StoreHSPWithinODTCOverNight(ML_STAR.HSP_Pipette2, t_blnStoreAtRoomTemperature);
      }
      else
      {
        l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
        l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold on deck at room temperature"));
        NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
        l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate from ODTC..."));
        NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
        NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
        NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
      }
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrierMOA.png"));
      }
      else
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrier.png"));
      }
      l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Unload processed samples"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" incubation is now completed. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. It is recommended to continue to the next process as described in the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" incubation is now completed. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. It is recommended to continue to the next process as described in the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        {
          loopCounter1 = 0;
          while (1 == 1)
          {
            loopCounter1 = loopCounter1 + 1;
            onerror goto errLabel_14 ;
            err.Clear();
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            break;
            errLabel_14 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
              NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
              l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            }   /* end if from skip handler if no error */
          }
        }
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
  }
  else
  {
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" is prepared"));
    l_strLastMessage = StrConcat4(l_strProcessName, Translate(" is prepared and ready for incubation in off-deck thermal cycler. The "), l_strReactionAndPlateName, Translate(" plate is hold on the CPAC at 4°C"));
    NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
    l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate for incubation in off-deck thermal cycler..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    l_strHeader = StrConcat2(l_strProcessName, Translate(" - Unload prepared reactions"));
    l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Unload prepared reactions."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" plate is prepared and ready for incubation in off-deck thermal cycler."), Translate(""), Translate(""), Translate("\nClick OK to continue."));
    VectorCustomDialogs::MessageDialog(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage);
    MECC::TraceComment(Translate("============\n\nMove HSP plate\n\n============"));
    l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrierMOA.png"));
    }
    else
    {
      l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrier.png"));
    }
    if (t_arrBlnProcessActivation.ElementAt( 9 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate."), Translate("\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate."), Translate("\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      l_strLastMessage = StrConcat4(Translate(""), Translate("Reload "), l_strReactionAndPlateName, Translate(" plate..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Reload processed samples"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Reload processed samples."), Translate(""), Translate("\n\nOnce the thermal cycler has been completed, please remove any seal or lid used and place the plate on position 2 on the carrier shown."), Translate(""), Translate("\nWhen ready to continue with "), l_strNextProcessName, Translate(" click 'OK'. "));
      }
      else
      {
        l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Reload processed samples."), Translate(""), Translate("\n\nOnce the thermal cycler has been completed, please remove any seal or lid used and place the plate on position 4 on the carrier shown."), Translate(""), Translate("\nWhen ready to continue with "), l_strNextProcessName, Translate(" click 'OK'. "));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      MECC::TraceComment(Translate("============\n\nMove HSP plate to CPAC\n\n============"));
      l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate to CPAC..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      else
      {
        NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
    }
    else
    {
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide.\n4. After the thermal cycler has been completed, it is recommended to continue immediately to the next process as described in the "), t_strMethodName, Translate(" reference guide.\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide.\n4. After the thermal cycler has been completed, it is recommended to continue immediately to the next process as described in the "), t_strMethodName, Translate(" reference guide.\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
    }
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_15 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_15 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  l_strLastMessage = StrConcat2(l_str_FunctionName, Translate(" is completed"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
}

private function Process9_SampleCleanup3(  ) void {
  private variable l_str_FunctionName;
  private variable l_strProcessName;
  private variable l_strReactionAndPlateName;
  private variable l_strNextProcessName;
  private variable l_strReadBarcode;
  private variable l_strHeader;
  private variable loopCounter1;
  private variable l_strMailSubject;
  private variable l_strReadCurrentBarcode;
  private variable l_strImage;
  private variable l_strLastMessage;
  l_str_FunctionName = Translate("");
  l_str_FunctionName = GetFunctionName();
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(l_str_FunctionName);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_str_FunctionName, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_TipCounterRead_CustomTips(ML_STAR, t_intRequiredNumberOf50uLTipsM9, t_intRequiredNumberOf300uLTipsM9, t_intRequiredNumberOf1000uLTipsM9, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  else
  {
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM9, t_intRequiredNumberOf300uLTipsM9, t_intRequiredNumberOf1000uLTipsM9, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  l_strProcessName = t_arr_strProcessID.ElementAt( 9 -1);
  l_strNextProcessName = t_arr_strProcessID.ElementAt( 9 -1);
  l_strReactionAndPlateName = Translate("''Sample Cleanup 3''");
  MECC::TraceComment(Translate("=============\n\nMove HSP plate to CPAC\n\n============="));
  if (t_intSelectedIndexSTART == 9)
  {
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
    }
  }
  MECC::TraceComment(Translate("============\n\nDownstack MIDI plate\n\n============"));
  l_strLastMessage = StrConcat2(Translate(""), Translate("Downstack MIDI plate..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_seqMIDI_Pipette, 0, 1, l_strReadBarcode, 4);
  SeqIncrement(t_trp_Stack1, 1);
  MECC::TraceComment(Translate("============\n\nMixing Beads\n\n============"));
  l_strLastMessage = StrConcat2(Translate(""), Translate("Mixing Beads..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_MixOnly(ML_STAR, t_seqAspirate_QIAseqBeads, 0, Translate("QIAseqRNAFusionXPPanels_1000F_AMPureBeadsMixing_SurfaceEmpty"), 10, 0);
  MECC::TraceComment(Translate("============\n\nTransferring Beads and Water to MIDI\n\n============"));
  l_strLastMessage = StrConcat2(Translate(""), Translate("Transferring Beads and water to MIDI..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::CUSTOMIZED_PIP_ReagentsFromTubeOrTroughOrPlateToPlate_ConsecutiveAspiration_2reagents(ML_STAR, t_seqAspirate_Water, t_seqAspirate_QIAseqBeads, t_seqMIDI_Pipette, t_fltVolumeP09_NucleaseFreeWater, t_fltVolumeP09_QIAseqBeads, Translate("QIAseqRNAFusionXPPanels_300F_NucleaseFreeWater_DispenseSurface_Empty"), Translate("QIAseqRNAFusionXPPanels_300F_Beads_DispenseSurface_Empty"), 0, 0, 0, 0, 0.8, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("============\n\nTransferring samples to fresh MIDI\n\n============"));
  l_strLastMessage = StrConcat2(Translate(""), Translate("Transferring samples to MIDI containing Beads..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    MECC::TraceComment(Translate("============\n\nMove HSP plate\n\n============"));
    l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, t_fltVolumeP09_UPCR, Translate("QIAseqRNAFusionXPPanels_MPH_50F_CleanSample_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 10, 0, t_fltVolumeP09_UPCR, 0.5, 2, 0, 0);
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_CPAC, t_seqMIDI_Pipette, t_fltVolumeP09_UPCR, Translate("QIAseqRNAFusionXPPanels_MPH_50F_CleanSample_SurfaceEmpty"), 10, 0, t_fltVolumeP09_UPCR, 0.5, 2, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  MECC::TraceComment(Translate("============\n\nMove HSP plate to waste\n\n============"));
  l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate to waste..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_Waste, 0, 0, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_Waste, 0, 0, l_strReadBarcode, 4);
    }
  }
  else
  {
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Waste, 0, 0, l_strReadBarcode, 4);
  }
  MECC::TraceComment(Translate("============\n\nMove MIDI plate to HHS\n\n============"));
  l_strLastMessage = StrConcat2(Translate(""), Translate("Move MIDI plate to HHS..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette, t_trpHHS3_MIDI, 0, 1, l_strReadBarcode, 4);
  MECC::TraceComment(Translate("============\n\nPerform bead clean up\n\n============"));
  l_strLastMessage = StrConcat2(Translate(""), Translate("Perform bead clean up..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  l_strLastMessage = StrConcat2(Translate(""), Translate("Illumina bead clean up..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::CUSTOMIZED_Process_Cleanup_MPH_MOA_P7AndP9(ML_STAR, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.MPH_LiquidWaste, t_seqAspirate_Water, t_fltVolumeP09_Ethanol, t_fltVolumeP09_WaterForElution, t_fltVolumeP09_FirstSupernatant, Translate("QIAseqRNAFusionXPPanels_1000F_Ethanol80_JetPart"), Translate("QIAseqRNAFusionXPPanels_50F_NucleaseFreeWater_DispenseSurface_Empty"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_Supernatant_DispenseJet"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_EthanolSupernatant_JetEmpty"), Translate("QIAseqRNAFusionXPPanels_50F_EtOH_DispenseJet_Empty"), 1400, 1400, 300, 300, t_intHHS3_HSP3_MIDI3, 300, 300, 600, 300, 300, t_intNumberOfSamplesFromFile, t_blnRemoveEthanolSupernatantWith50ulTips);
    }
    else
    {
      NGSSTARPROCESSES::CUSTOMIZED_Process_Cleanup_MPH_P7AndP9(ML_STAR, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqAspirate_Water, t_fltVolumeP09_Ethanol, t_fltVolumeP09_WaterForElution, t_fltVolumeP09_FirstSupernatant, Translate("QIAseqRNAFusionXPPanels_1000F_Ethanol80_JetPart"), Translate("QIAseqRNAFusionXPPanels_50F_NucleaseFreeWater_DispenseSurface_Empty"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_Supernatant_DispenseJet"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_EthanolSupernatant_JetEmpty"), Translate("QIAseqRNAFusionXPPanels_50F_EtOH_DispenseJet_Empty"), 1400, 1400, 300, 300, t_intHHS3_HSP3_MIDI3, 300, 300, 600, 300, 300, t_intNumberOfSamplesFromFile, t_blnRemoveEthanolSupernatantWith50ulTips);
    }
  }
  else
  {
    NGSSTARPROCESSES::CUSTOMIZED_Process_CleanUp_P7AndP9(ML_STAR, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqAspirate_Water, t_fltVolumeP09_Ethanol, t_fltVolumeP09_WaterForElution, t_fltVolumeP09_FirstSupernatant, Translate("QIAseqRNAFusionXPPanels_1000F_Ethanol80_JetPart"), Translate("QIAseqRNAFusionXPPanels_50F_NucleaseFreeWater_DispenseSurface_Empty"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_Supernatant_DispenseJet"), Translate("QIAseqRNAFusionXPPanels_MPH_300F_EthanolSupernatant_JetEmpty"), Translate("QIAseqRNAFusionXPPanels_50F_EtOH_DispenseJet_Empty"), 1400, 1400, 300, 300, t_intColumnsToProcessPerBatch, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::TRUE, 300, 300, 600, 300, 300, t_blnRemoveEthanolSupernatantWith50ulTips);
  }
  MECC::TraceComment(Translate("============\n\nDownstack HSP plate\n\n============"));
  l_strLastMessage = StrConcat2(Translate(""), Translate("Downstack HSP plate..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trp_Stack4, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
  }
  else
  {
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
  }
  SeqIncrement(t_trp_Stack4, 1);
  MECC::TraceComment(Translate("============\n\nTransferring purified samples to fresh HSP\n\n============"));
  l_strLastMessage = StrConcat2(Translate(""), Translate("Transferring purified samples to fresh HSP..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltVolumeP09_Eluat, Translate("QIAseqRNAFusionXPPanels_50F_CleanSample_SlowerAspiration_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 0.4, 0.75, 0, 0);
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltVolumeP09_Eluat, Translate("QIAseqRNAFusionXPPanels_50F_CleanSample_SlowerAspiration_SurfaceEmpty"), 0, 0, 0, 0.4, 0.75, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  }
  MECC::TraceComment(Translate("============\n\nMove MIDI plate to waste\n\n============"));
  l_strLastMessage = StrConcat2(Translate(""), Translate("Move MIDI plate to waste.."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Waste, 0, 1, l_strReadBarcode, 4);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
    {
      l_strLastMessage = StrConcat4(Translate(""), Translate("Load "), l_strReactionAndPlateName, Translate(" plate for incubation in ODTC..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
      NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
      Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
      NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
      NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
      l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
      if (t_blnStoreAtRoomTemperature == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat4(l_strProcessName, Translate(" is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold in the ODTC at room temperature"));
      }
      else
      {
        l_strLastMessage = StrConcat4(l_strProcessName, Translate(" is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold in the ODTC at 12°C"));
      }
      NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
      ProcessX_StoreHSPWithinODTCOverNight(ML_STAR.HSP_Pipette2, t_blnStoreAtRoomTemperature);
    }
    else
    {
      l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
      l_strLastMessage = StrConcat4(l_strProcessName, Translate(" is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold on deck at room temperature"));
      NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
      if(0){
        NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
        NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
      }
    }
  }
  else
  {
    l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
    l_strLastMessage = StrConcat4(l_strProcessName, Translate(" is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold on deck at room temperature"));
    NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
  }
  if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  }
  if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  }
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrierMOA.png"));
  }
  else
  {
    l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrier.png"));
  }
  l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  l_strHeader = StrConcat2(l_strProcessName, Translate(" - Unload processed samples"));
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" is now completed. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate."), Translate(""), Translate(""), Translate("\n\nClick OK to continue."));
  }
  else
  {
    l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" is now completed. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate."), Translate(""), Translate(""), Translate("\n\nClick OK to continue."));
  }
  VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
  if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
  {
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
  {
    {
      loopCounter1 = 0;
      while (1 == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_16 ;
        err.Clear();
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        break;
        errLabel_16 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
          NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
          NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
        }   /* end if from skip handler if no error */
      }
    }
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }
  l_strLastMessage = StrConcat2(l_str_FunctionName, Translate(" is completed"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
}

private function _SelectTestMethodProcesses(  ) void {
  private variable l_intDialogID;
  private variable l_int_OptionSelected;
  private variable l_str_FunctionName;
  private variable l_int_NumberOfODTCTransportCycles;
  private variable l_int_NumberOfColumns;
  private variable l_str_NumberOfColumns;
  private variable l_int_LoopCounter1;
  private variable l_str_NumberOfODTCTransportCycles;
  private variable l_intCountRows;
  private variable l_strCoordinate;
  private variable l_intCountColumns;
  private variable l_arr_strCoordinateLetter[];
  private variable l_arr_strPositionID[];
  private variable l_arr_strPositionIDCombinations[];
  private variable l_intReturnValueDialog;
  private variable arrRanges[];
  private variable l_arr_strMandatoryStopPosition[];
  private variable l_arr_strDeactivatedStartPositionID[];
  private variable arrUnits[];
  private variable arrTooltip[];
  private variable arrSelectedResult[];
  private variable arrLabels[];
  private variable arrValues[];
  private variable arrTypes[];
  private variable l_strLastMessage;
  l_str_FunctionName = Translate("");
  l_str_FunctionName = GetFunctionName();
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_str_FunctionName, ASWGLOBAL::BOOL::TRUE);
  l_intDialogID = 1;
  NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Which test method do you want to use?"), Translate("Plate to Plate Transfer Check"));
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Which test method do you want to use?"), Translate("ODTC Movement Check"));
  }
  NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(l_intDialogID);
  NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Which test method do you want to use?"), l_int_OptionSelected);
  if (l_int_OptionSelected == 1)
  {
    t_blnPlateToPlateTransferCheck = ASWGLOBAL::BOOL::TRUE;
  }
  else
  {
    t_blnODTCMovementCheck = ASWGLOBAL::BOOL::TRUE;
  }
  if (t_blnPlateToPlateTransferCheck == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      l_intDialogID = 2;
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Do you want to use the MPH?"), Translate("YES"));
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Do you want to use the MPH?"), Translate("NO"));
    }
    l_intDialogID = 2;
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Which tip type do you want to use?"), Translate("50 µl filter tips"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Which tip type do you want to use?"), Translate("300 µl filter tips"));
    l_intDialogID = 2;
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Do you want to exchange the tips (channels only)?"), Translate("NO"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Do you want to exchange the tips (channels only)?"), Translate("YES"));
    l_intDialogID = 2;
    l_int_NumberOfColumns = 0;
    {
      for(l_int_LoopCounter1 = 0; l_int_LoopCounter1 < 10;)
      {
        l_int_LoopCounter1 = l_int_LoopCounter1 + 1;
        l_int_NumberOfColumns = l_int_NumberOfColumns + 1;
        l_str_NumberOfColumns = StrIStr(l_int_NumberOfColumns);
        NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Select number of columns to transfer"), l_str_NumberOfColumns);
      }
    }
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(l_intDialogID);
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Do you want to use the MPH?"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::FALSE;
    }
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Which tip type do you want to use?"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      t_blnUse50ulTips = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      t_blnUse300ulTips = ASWGLOBAL::BOOL::TRUE;
    }
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Do you want to exchange the tips (channels only)?"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      t_blnUseTipExchange = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      t_blnUseTipExchange = ASWGLOBAL::BOOL::TRUE;
    }
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Select number of columns to transfer"), l_int_OptionSelected);
    l_int_NumberOfColumns = 0;
    l_int_NumberOfColumns = l_int_NumberOfColumns + l_int_OptionSelected;
    t_intNumberOfSamplesFromFile = l_int_NumberOfColumns * 8;
    l_arr_strCoordinateLetter.SetSize(0);
    l_arr_strCoordinateLetter.AddAsLast(Translate("A"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("B"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("C"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("D"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("E"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("F"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("G"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("H"));
    t_arr_strCoordinates.SetSize(0);
    {
      for(l_intCountColumns = 0; l_intCountColumns < l_int_NumberOfColumns;)
      {
        l_intCountColumns = l_intCountColumns + 1;
        {
          for(l_intCountRows = 0; l_intCountRows < 8;)
          {
            l_intCountRows = l_intCountRows + 1;
            l_strCoordinate = StrConcat2(l_arr_strCoordinateLetter.ElementAt( l_intCountRows -1), l_intCountColumns);
            t_arr_strCoordinates.AddAsLast(l_strCoordinate);
          }
        }
      }
    }
    APPSLIB::TraceArray(Translate("t_arr_strCoordinates"), t_arr_strCoordinates);
    l_arr_strPositionID.SetSize(0);
    l_arr_strPositionID.AddAsLast(Translate("MIDI_OnMagnet"));
    l_arr_strPositionID.AddAsLast(Translate("MIDI_Pipette"));
    l_arr_strPositionID.AddAsLast(Translate("HSP_OnMagnet"));
    l_arr_strPositionID.AddAsLast(Translate("HSP_Pipette"));
    l_arr_strPositionID.AddAsLast(Translate("HSP_Pipette2"));
    l_arr_strPositionIDCombinations.SetSize(0);
    l_arr_strPositionIDCombinations.AddAsLast(Translate("2.4.5"));
    l_arr_strPositionIDCombinations.AddAsLast(Translate("1.3.4.5"));
    l_arr_strPositionIDCombinations.AddAsLast(Translate("2.4.5"));
    l_arr_strPositionIDCombinations.AddAsLast(Translate("1.2.3.5"));
    l_arr_strPositionIDCombinations.AddAsLast(Translate("1.2.3.4"));
    l_arr_strDeactivatedStartPositionID.SetSize(0);
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::FALSE)
      {
        l_arr_strDeactivatedStartPositionID.AddAsLast(4);
      }
    }
    l_arr_strMandatoryStopPosition.SetSize(0);
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::FALSE)
      {
        l_arr_strMandatoryStopPosition.AddAsLast(4);
      }
    }
    MECC::TraceComment(Translate("POSITION DEFINITIONS - INPUT"));
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strPositionID:"), l_arr_strPositionID);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strPositionIDCombinations:"), l_arr_strPositionIDCombinations);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strDeactivatedStartPositionID:"), l_arr_strDeactivatedStartPositionID);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strMandatoryStopPosition:"), l_arr_strMandatoryStopPosition);
    NGSSTARLOADING::Display_SelectProcesses_Dialog(1, l_arr_strPositionID, l_arr_strPositionIDCombinations, l_arr_strDeactivatedStartPositionID, l_arr_strMandatoryStopPosition, t_intSelectedIndexAspirationPosition, t_intSelectedIndexDispensePosition, t_arrBlnPositionActivation);
    VectorCustomDialogs::Initialize();
    arrLabels.SetSize(0);
    arrValues.SetSize(0);
    arrUnits.SetSize(0);
    arrTypes.SetSize(0);
    arrRanges.SetSize(0);
    arrTooltip.SetSize(0);
    arrSelectedResult.SetSize(0);
    arrLabels.AddAsLast(Translate("Tranfer volume"));
    arrLabels.AddAsLast(Translate("Aspiration heigt"));
    arrValues.AddAsLast(Translate("25.0"));
    arrValues.AddAsLast(Translate("0.5"));
    arrUnits.AddAsLast(Translate(" µl"));
    arrUnits.AddAsLast(Translate(" mm"));
    arrTypes.AddAsLast(3);
    arrTypes.AddAsLast(3);
    if (t_blnUse50ulTips == ASWGLOBAL::BOOL::ON)
    {
      arrRanges.AddAsLast(Translate("5.0|45.0"));
    }
    else
    {
      arrRanges.AddAsLast(Translate("20.0|280.0"));
    }
    arrRanges.AddAsLast(Translate("0.1|1.0"));
    if (t_blnUse50ulTips == ASWGLOBAL::BOOL::ON)
    {
      arrTooltip.AddAsLast(Translate("Select a value between 5.0 and 45.0"));
    }
    else
    {
      arrTooltip.AddAsLast(Translate("Select a value between 20.0 and 280.0"));
    }
    arrTooltip.AddAsLast(Translate("Select a value between 0.1 and 1.0"));
    l_intReturnValueDialog = VectorCustomDialogs::InputDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, Translate("Select the desired aspiration height for the plate to plate transfer."), Translate("Press OK to continue. CANCEL will abort the run"), arrLabels, arrValues, arrUnits, arrTypes, arrRanges, arrTooltip, arrSelectedResult);
    if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
    {
      t_flt_VolumePlateToPlateTransferCheck=arrSelectedResult.GetAt(1-1);
      t_flt_AspHeightPlateToPlateTransferCheck=arrSelectedResult.GetAt(2-1);
    }
    else
    {
      MECC::TraceComment(Translate("User pressed cancel OR There was a wrong input"));
      abort;
    }
  }
  if (t_blnODTCMovementCheck == ASWGLOBAL::BOOL::TRUE)
  {
    l_intDialogID = 2;
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Which deck position do you want to use for the transport?"), Translate("HSP_Pipette"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Which deck position do you want to use for the transport?"), Translate("HSP_Pipette2"));
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::FALSE)
    {
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Which deck position do you want to use for the transport?"), Translate("HSP_OnMagnet"));
    }
    l_intDialogID = 2;
    l_int_NumberOfODTCTransportCycles = 0;
    {
      for(l_int_LoopCounter1 = 0; l_int_LoopCounter1 < 10;)
      {
        l_int_LoopCounter1 = l_int_LoopCounter1 + 1;
        l_int_NumberOfODTCTransportCycles = l_int_NumberOfODTCTransportCycles + 1;
        l_str_NumberOfODTCTransportCycles = StrIStr(l_int_NumberOfODTCTransportCycles);
        NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Select number of ODTC transport cycles"), l_int_NumberOfODTCTransportCycles);
      }
    }
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(l_intDialogID);
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Which deck position do you want to use for the transport?"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      t_intUsedTransportSequence = 1;
      NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arr_strCoordinates, t_trpODTCMovementCheck, 2);
    }
    else
    {
      if (l_int_OptionSelected == 2)
      {
        t_intUsedTransportSequence = 2;
        NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arr_strCoordinates, t_trpODTCMovementCheck, 2);
      }
      else
      {
        if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::FALSE)
        {
          t_intUsedTransportSequence = 3;
          NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_OnMagnet, t_arr_strCoordinates, t_trpODTCMovementCheck, 2);
        }
      }
    }
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Select number of ODTC transport cycles"), l_int_OptionSelected);
    l_int_NumberOfODTCTransportCycles = 0;
    t_int_NumberOfODTCTransportCycles = l_int_NumberOfODTCTransportCycles + l_int_OptionSelected;
  }
  l_strLastMessage = StrConcat2(l_str_FunctionName, Translate(" is completed"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
}

private function Process001_PlateToPlateTransferCheck(  ) void {
  private variable l_str_FunctionName;
  private variable l_OptionSelected;
  private variable l_strImage;
  private variable l_strLiquidClassUsedForPlateToPlateTransferCheck;
  private variable l_strLastMessage;
  l_str_FunctionName = Translate("");
  l_str_FunctionName = GetFunctionName();
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(l_str_FunctionName);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_str_FunctionName, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_TipCounterRead_CustomTips(ML_STAR, t_intRequiredNumberOf50uLTipsM0, t_intRequiredNumberOf300uLTipsM0, t_intRequiredNumberOf1000uLTipsM0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  else
  {
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM0, t_intRequiredNumberOf300uLTipsM0, t_intRequiredNumberOf1000uLTipsM0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  if (t_blnUse50ulTips == ASWGLOBAL::BOOL::TRUE)
  {
    l_strLiquidClassUsedForPlateToPlateTransferCheck = StrConcat2(Translate("Tip_50ulFilter_Water_DispenseSurface_Empty_TransferTest"), Translate(""));
  }
  else
  {
    l_strLiquidClassUsedForPlateToPlateTransferCheck = StrConcat2(Translate("StandardVolumeFilter_Water_DispenseSurface_Empty_TransferTest"), Translate(""));
  }
  if (t_intSelectedIndexAspirationPosition == 1)
  {
    l_strLastMessage = StrConcat2(Translate("Method will start now with aspirating from MIDI_OnMagnet."), Translate("\n\nPlease check if tips touch the well bottom during aspiration."));
  }
  if (t_intSelectedIndexAspirationPosition == 2)
  {
    l_strLastMessage = StrConcat2(Translate("Method will start now with aspirating from MIDI_Pipette."), Translate("\n\nPlease check if tips touch the well bottom during aspiration."));
  }
  if (t_intSelectedIndexAspirationPosition == 3)
  {
    l_strLastMessage = StrConcat2(Translate("Method will start now with aspirating from HSP_OnMagnet."), Translate("\n\nPlease check if tips touch the well bottom during aspiration."));
  }
  if (t_intSelectedIndexAspirationPosition == 4)
  {
    l_strLastMessage = StrConcat2(Translate("Method will start now with aspirating from HSP_Pipette."), Translate("\n\nPlease check if tips touch the well bottom during aspiration."));
  }
  if (t_intSelectedIndexAspirationPosition == 5)
  {
    l_strLastMessage = StrConcat2(Translate("Method will start now with aspirating from HSP_Pipette2."), Translate("\n\nPlease check if tips touch the well bottom during aspiration."));
  }
  NGSSTARLOADING::Display_Message_Dialog(l_strLastMessage);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqAspirationPosition, t_seqDispensePosition, t_flt_VolumePlateToPlateTransferCheck, l_strLiquidClassUsedForPlateToPlateTransferCheck, t_intNumberOfSamplesFromFile, 0, 0, 0, t_flt_AspHeightPlateToPlateTransferCheck, 2, 0, 0);
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirationPosition, t_seqDispensePosition, t_flt_VolumePlateToPlateTransferCheck, l_strLiquidClassUsedForPlateToPlateTransferCheck, 0, 0, 0, t_flt_AspHeightPlateToPlateTransferCheck, 2, t_blnUseTipExchange, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  }
  if (t_intSelectedIndexDispensePosition == 1)
  {
    l_strLastMessage = StrConcat12(Translate("Method finished the transfer to MIDI_OnMagnet. Proceed as follows:"), Translate("\n1. Click OK to complete the method."), Translate("\n2. Open the Liquid Class Editor."), Translate("\n3. Check the TADM curves of the liquid class `"), l_strLiquidClassUsedForPlateToPlateTransferCheck, Translate("´ for tip blockage as shown on the picture."), Translate("\n4. Run the method again with altered z-values until the aspiration height is as low as possible, but the tips are not blocked."), Translate("\n5. Adjust the settings in the method accordingly."), Translate(""), Translate("\n\nClick OK to complete the method."), Translate(""), Translate(""));
  }
  if (t_intSelectedIndexDispensePosition == 2)
  {
    l_strLastMessage = StrConcat12(Translate("Method finished the transfer to MIDI_Pipette. Proceed as follows:"), Translate("\n1. Click OK to complete the method."), Translate("\n2. Open the Liquid Class Editor."), Translate("\n3. Check the TADM curves of the liquid class `"), l_strLiquidClassUsedForPlateToPlateTransferCheck, Translate("´ for tip blockage as shown on the picture."), Translate("\n4. Run the method again with altered z-values until the aspiration height is as low as possible, but the tips are not blocked."), Translate("\n5. Adjust the settings in the method accordingly."), Translate(""), Translate("\n\nClick OK to complete the method."), Translate(""), Translate(""));
  }
  if (t_intSelectedIndexDispensePosition == 3)
  {
    l_strLastMessage = StrConcat12(Translate("Method finished the transfer to HSP_OnMagnet. Proceed as follows:"), Translate("\n1. Click OK to complete the method."), Translate("\n2. Open the Liquid Class Editor."), Translate("\n3. Check the TADM curves of the liquid class `"), l_strLiquidClassUsedForPlateToPlateTransferCheck, Translate("´ for tip blockage as shown on the picture."), Translate("\n4. Run the method again with altered z-values until the aspiration height is as low as possible, but the tips are not blocked."), Translate("\n5. Adjust the settings in the method accordingly."), Translate(""), Translate("\n\nClick OK to complete the method."), Translate(""), Translate(""));
  }
  if (t_intSelectedIndexDispensePosition == 4)
  {
    l_strLastMessage = StrConcat12(Translate("Method finished the transfer to HSP_Pipette. Proceed as follows:"), Translate("\n1. Click OK to complete the method."), Translate("\n2. Open the Liquid Class Editor."), Translate("\n3. Check the TADM curves of the liquid class `"), l_strLiquidClassUsedForPlateToPlateTransferCheck, Translate("´ for tip blockage as shown on the picture."), Translate("\n4. Run the method again with altered z-values until the aspiration height is as low as possible, but the tips are not blocked."), Translate("\n5. Adjust the settings in the method accordingly."), Translate(""), Translate("\n\nClick OK to complete the method."), Translate(""), Translate(""));
  }
  if (t_intSelectedIndexDispensePosition == 5)
  {
    l_strLastMessage = StrConcat12(Translate("Method finished the transfer to HSP_Pipette2. Proceed as follows:"), Translate("\n1. Click OK to complete the method."), Translate("\n2. Open the Liquid Class Editor."), Translate("\n3. Check the TADM curves of the liquid class `"), l_strLiquidClassUsedForPlateToPlateTransferCheck, Translate("´ for tip blockage as shown on the picture."), Translate("\n4. Run the method again with altered z-values until the aspiration height is as low as possible, but the tips are not blocked."), Translate("\n5. Adjust the settings in the method accordingly."), Translate(""), Translate("\n\nClick OK to complete the method."), Translate(""), Translate(""));
  }
  l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading\\"), t_str_PicturesDirectoryUsed, Translate("Pictures"), Translate("\\"), Translate("TADM.png"));
  l_OptionSelected = VectorCustomDialogs::MessageDialogWithImage(Translate("Plate to plate tranfer check to optimize z values for fixed height aspiration"), 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
  l_strLastMessage = StrConcat2(l_str_FunctionName, Translate(" is completed"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
}

private function Process4_AdapterLigation(  ) void {
  private variable l_strProcessName;
  private variable l_strHeader;
  private variable l_strReactionAndPlateName;
  private variable l_str_FunctionName;
  private variable l_intReturnValue;
  private variable l_strProtocolName;
  private variable l_strNextProcessName;
  private variable l_strReadBarcode;
  private variable loopCounter1;
  private variable l_strMailSubject;
  private variable l_strLastMessage;
  private variable l_strReadCurrentBarcode;
  private variable l_strIndexSet;
  private variable l_strImage;
  private variable l_strDialogTitle;
  private variable l_intNumberOfIndex1IDs;
  private variable l_strTopText;
  private variable l_intOptionSelected_IndexPlate;
  l_str_FunctionName = Translate("");
  l_str_FunctionName = GetFunctionName();
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- START -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(l_str_FunctionName);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_str_FunctionName, ASWGLOBAL::BOOL::TRUE);
  if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_TipCounterRead_CustomTips(ML_STAR, t_intRequiredNumberOf50uLTipsM4, t_intRequiredNumberOf300uLTipsM4, t_intRequiredNumberOf1000uLTipsM4, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  else
  {
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM4, t_intRequiredNumberOf300uLTipsM4, t_intRequiredNumberOf1000uLTipsM4, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  }
  l_strProcessName = t_arr_strProcessID.ElementAt( 4 -1);
  l_strNextProcessName = t_arr_strProcessID.ElementAt( 5 -1);
  l_strReactionAndPlateName = Translate("Index Adapters Ligation");
  MECC::TraceComment(Translate("=============\n\nMove HSP plate to CPAC\n\n============="));
  if (t_intSelectedIndexSTART == 4)
  {
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
    }
  }
  if (t_blnPostponedAdapterLoading == ASWGLOBAL::BOOL::TRUE)
  {
    t_blnReturnAdapterPlateDuringIncubation = ASWGLOBAL::BOOL::FALSE;
    t_blnReturnAdapterPlateEndOfMethod = ASWGLOBAL::BOOL::FALSE;
    t_blnReturnAdapterPlateDiscard = ASWGLOBAL::BOOL::FALSE;
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    VectorCustomDialogs::AppendStatusText(Translate("Postponed Index Adapter Loading..."));
    l_strLastMessage = StrConcat4(Translate(""), Translate("Load "), Translate("UDI Index Adapter Plate"), Translate(" plate..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    l_strIndexSet=t_arrListOfIndexSets.GetAt(1-1);
    l_strHeader = StrConcat2(l_strProcessName, Translate(" - Load QIAseq Targeted DNA Pro UDI Index plate"));
    l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("CPACCarrier.png"));
    l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Load QIAseq Targeted DNA Pro UDI Index plate."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" plate is currently in preparation."), Translate("\n"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    l_strLastMessage = StrConcat4(l_strLastMessage, Translate("\nPlease load the QIAseq Targeted DNA Pro Index plate "), l_strIndexSet, Translate(" (>5 µl) on position 1 of the carrier shown."));
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, l_strLastMessage, 1, ML_STAR.HHS1_HSP, 0);
    if (t_intOneOrTwoIndexSets == 2)
    {
      l_strIndexSet=t_arrListOfIndexSets.GetAt(2-1);
      l_strLastMessage = StrConcat4(l_strLastMessage, Translate("\nPlease load the QIAseq Targeted DNA Pro Index plate "), l_strIndexSet, Translate(" (>5 µl) on position 2 of the carrier shown."));
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, l_strLastMessage, 1, ML_STAR.HHS2_HSP, 0);
    }
    l_strLastMessage = StrConcat4(l_strLastMessage, Translate("\n\nClick OK to continue."), Translate(""), Translate(""));
    VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_17 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_17 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    l_strDialogTitle = Translate("Return of the Index Adapter Plate");
    l_strTopText = Translate("Please select when the Index Adapter plate should be returned.");
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(6, Translate("Return of the Index Adapter Plate"), Translate("During Ligation Incubation"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(6, Translate("Return of the Index Adapter Plate"), Translate("end of method"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(6, Translate("Return of the Index Adapter Plate"), Translate("discard the plate"));
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(6);
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(6, Translate("Return of the Index Adapter Plate"), l_intOptionSelected_IndexPlate);
    if (l_intOptionSelected_IndexPlate == 1)
    {
      t_blnReturnAdapterPlateDuringIncubation = ASWGLOBAL::BOOL::TRUE;
    }
    if (l_intOptionSelected_IndexPlate == 2)
    {
      t_blnReturnAdapterPlateEndOfMethod = ASWGLOBAL::BOOL::TRUE;
    }
    if (l_intOptionSelected_IndexPlate == 2)
    {
      t_blnReturnAdapterPlateDiscard = ASWGLOBAL::BOOL::TRUE;
    }
  }
  MECC::TraceComment(Translate("=============\n\nAdding Index Adapters to samples\n\n============="));
  l_strLastMessage = StrConcat4(Translate(""), Translate("Adding "), l_strReactionAndPlateName, Translate(" to samples..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHHS1_HSP_IndexAdapterSet1, t_seqHSP_CPAC, t_fltVolumeP04_i7Adapter, Translate("QIAseqRNAFusionXPPanel_50F_i7IndexAdapter_DispenseSurface_Empty"), 10, 0, t_fltVolumeP04_AdapterLigationMix, 0.5, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  if (t_intOneOrTwoIndexSets == 2)
  {
    l_intNumberOfIndex1IDs=t_arrIndex1PositionIDs.GetSize();
    SeqIncrement(t_seqHSP_CPAC, l_intNumberOfIndex1IDs);
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHHS2_HSP_IndexAdapterSet2, t_seqHSP_CPAC, t_fltVolumeP04_i7Adapter, Translate("QIAseqRNAFusionXPPanel_50F_i7IndexAdapter_DispenseSurface_Empty"), 10, 0, t_fltVolumeP04_AdapterLigationMix, 0.5, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  l_strReactionAndPlateName = Translate("Adapter Ligation");
  l_strLastMessage = StrConcat4(Translate(""), Translate("Mixing of "), l_strReactionAndPlateName, Translate(" Mix before dispense to samples..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::CUSTOMIZED_PIP_MixOnly(ML_STAR, t_seqAspirate_LigationMix_distinct, 0, Translate("QIAseqRNAFusionXPPanels_1000F_LigationMixMixing_DispenseSurface_Empty"), 10, t_fltVolumeP04_LigationMixTubeMixing);
  l_strLastMessage = StrConcat4(Translate(""), Translate("Dispensing "), l_strReactionAndPlateName, Translate(" Mix to samples..."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_LigationMix, t_seqHSP_CPAC, t_fltVolumeP04_AdapterLigationMix, Translate("QIAseqRNAFusionXPPanel_300F_LigationMix_DispenseSurface_Empty"), 10, 0, t_fltVolumeP04_LigationReactionMixing, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("=============\n\nIncubation in ODTC or off-deck thermal cycler\n\n============="));
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    l_strLastMessage = StrConcat4(Translate(""), Translate("Load "), l_strReactionAndPlateName, Translate(" plate for incubation in ODTC..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_blnTestODTCWithShortDummyProtocol == ASWGLOBAL::BOOL::TRUE)
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_Ligation_short");
    }
    else
    {
      l_strProtocolName = Translate("RNAFusionXPPanel_Ligation");
    }
    l_strLastMessage = StrConcat4(Translate(""), Translate("Running "), l_strProtocolName, Translate(" protocol..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, l_strProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    if (t_blnReturnAdapterPlateDuringIncubation == ASWGLOBAL::BOOL::TRUE)
    {
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      l_strLastMessage = StrConcat4(Translate("Please remove the Index Adapter Plates from position 1 and 2 of"), Translate(" the highlighted carrier."), Translate(""), Translate(""));
      l_intReturnValue = VectorCustomDialogs::MessageDialogWithImage(Translate("Return of the Index Adapter Plate"), 1, 2, 0, 0, 0, 0, l_strImage, 0);
      if (l_intReturnValue == 6)
      {
      }
      else
      {
        abort;
      }
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        {
          loopCounter1 = 0;
          while (1 == 1)
          {
            loopCounter1 = loopCounter1 + 1;
            onerror goto errLabel_18 ;
            err.Clear();
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            break;
            errLabel_18 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
              NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
              l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            }   /* end if from skip handler if no error */
          }
        }
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_GetDataFromLastRun(t_intDeviceNumberODTC, l_strProtocolName);
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate from ODTC..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
      if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::FALSE)
      {
        l_strLastMessage = StrConcat4(Translate(""), Translate("   - Discard Comfort Lid "), Translate(""), Translate(""));
        NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
        NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
      }
      else
      {
        l_strLastMessage = StrConcat4(Translate(""), Translate("   - Return Comfort Lid to Park Position"), Translate(""), Translate(""));
        NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
        NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
      }
      NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      else
      {
        NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    }
    else
    {
      if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
      {
        l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
        if (t_blnStoreAtRoomTemperature == ASWGLOBAL::BOOL::TRUE)
        {
          l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold in the ODTC at room temperature"));
        }
        else
        {
          l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold in the ODTC at 12°C"));
        }
        NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
        ProcessX_StoreHSPWithinODTCOverNight(ML_STAR.HSP_Pipette2, t_blnStoreAtRoomTemperature);
      }
      else
      {
        l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" finished"));
        l_strLastMessage = StrConcat4(l_strProcessName, Translate(" incubation is now completed. The "), l_strReactionAndPlateName, Translate(" plate is hold on deck at room temperature"));
        NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
        l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate from ODTC..."));
        NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
        NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
        NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
      }
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrierMOA.png"));
      }
      else
      {
        l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrier.png"));
      }
      l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Unload processed samples"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" incubation is now completed. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. It is recommended to continue to the next process as described in the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Unload processed samples."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" incubation is now completed. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. It is recommended to continue to the next process as described in the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        {
          loopCounter1 = 0;
          while (1 == 1)
          {
            loopCounter1 = loopCounter1 + 1;
            onerror goto errLabel_19 ;
            err.Clear();
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            break;
            errLabel_19 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
              NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
              l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
              NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            }   /* end if from skip handler if no error */
          }
        }
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
  }
  else
  {
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    l_strMailSubject = StrConcat4(t_strMethodName, Translate(" "), l_strProcessName, Translate(" reaction is prepared"));
    l_strLastMessage = StrConcat4(l_strProcessName, Translate(" is prepared and ready for incubation in off-deck thermal cycler. The "), l_strReactionAndPlateName, Translate(" plate is hold on the CPAC at 4°C"));
    NGSSTARPROCESSES::DATA_SendEmail(l_strMailSubject, l_strLastMessage);
    l_strLastMessage = StrConcat4(Translate(""), Translate("Unload "), l_strReactionAndPlateName, Translate(" plate for incubation in off-deck thermal cycler..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    l_strHeader = StrConcat2(l_strProcessName, Translate(" - Unload processed samples"));
    l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Unload prepared reactions."), Translate("\n\nThe "), l_strReactionAndPlateName, Translate(" plate is prepared and ready for incubation in off-deck thermal cycler."), Translate(""), Translate(""), Translate("\nClick OK to continue."));
    VectorCustomDialogs::MessageDialog(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage);
    MECC::TraceComment(Translate("============\n\nMove HSP plate\n\n============"));
    l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate..."));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    else
    {
      NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_CPAC, t_trpHSP_Pipette2, 0, 1, l_strReadBarcode, 4);
    }
    if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
    {
      l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrierMOA.png"));
    }
    else
    {
      l_strImage = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), Translate("Library\\NGSStarLoading"), Translate("\\"), t_str_PicturesDirectoryUsed, Translate("Pictures\\"), Translate("PlateTipCarrier.png"));
    }
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate."), Translate("\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate."), Translate("\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide."), Translate("\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      l_strLastMessage = StrConcat4(Translate(""), Translate("Reload "), l_strReactionAndPlateName, Translate(" plate..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Reload processed samples"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Reload processed samples."), Translate(""), Translate("\n\nOnce the thermal cycler has been completed, please remove any seal or lid used and place the plate on position 2 on the carrier shown."), Translate(""), Translate("\nWhen ready to continue with "), l_strNextProcessName, Translate(" click 'OK'. "));
      }
      else
      {
        l_strLastMessage = StrConcat8(l_strProcessName, Translate(" - Reload processed samples."), Translate(""), Translate("\n\nOnce the thermal cycler has been completed, please remove any seal or lid used and place the plate on position 4 on the carrier shown."), Translate(""), Translate("\nWhen ready to continue with "), l_strNextProcessName, Translate(" click 'OK'. "));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      MECC::TraceComment(Translate("============\n\nMove HSP plate to CPAC\n\n============"));
      l_strLastMessage = StrConcat2(Translate(""), Translate("Move HSP plate to CPAC..."));
      NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::Trp_HSP_MOA(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
      else
      {
        NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_CPAC, 0, 1, l_strReadBarcode, 4);
      }
    }
    else
    {
      l_strHeader = StrConcat2(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler"));
      if (t_blnUseNGSSTARMOA == ASWGLOBAL::BOOL::TRUE)
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 2.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide.\n4. After the thermal cycler has been completed, it is recommended to continue immediately to the next process as described in the "), t_strMethodName, Translate(" reference guide.\n\nClick OK to continue."));
      }
      else
      {
        l_strLastMessage = StrConcat12(l_strProcessName, Translate(" - Incubation in off-deck thermal cycler.\n\nThe "), l_strReactionAndPlateName, Translate(" plate is now prepared. Proceed as follows:\n1. Remove the "), l_strReactionAndPlateName, Translate(" plate from position 4.\n2. Label the plate with "), l_strReactionAndPlateName, Translate(" plate.\n3. Immediately take the plate to a thermal cycler and perform incubation off-deck according to the "), t_strMethodName, Translate(" reference guide.\n4. After the thermal cycler has been completed, it is recommended to continue immediately to the next process as described in the "), t_strMethodName, Translate(" reference guide.\n\nClick OK to continue."));
      }
      VectorCustomDialogs::MessageDialogWithImage(l_strHeader, 1, 0, 0, 0, 0, l_strLastMessage, l_strImage, 0);
      if (t_blnSkipLoadingRoutine == ASWGLOBAL::BOOL::FALSE)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
    }
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_20 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_20 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  l_strLastMessage = StrConcat2(l_str_FunctionName, Translate(" is completed"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strLastMessage, ASWGLOBAL::BOOL::TRUE);
  Trace("");
  Trace("==================================================");
  Trace("");
  Trace("");
  Trace("FUNCTION:  ", l_str_FunctionName," -- FINISH -- ");
  Trace("");
  Trace("");
  Trace("==================================================");
  Trace("");
}
