<?xml version="1.0" encoding="utf-8"?>
<MethodSet>
  <PreMethod methodName="Roche_AVENIO_CGP_Init" creator="AF" dateTime="2022-06-09T09:27:57.5847358+02:00">
    <TargetBlockTemperature>25</TargetBlockTemperature>
    <TargetLidTemp>50</TargetLidTemp>
  </PreMethod>
  <Method methodName="Roche_AVENIO_CGP_Polishing" creator="AF" dateTime="2022-06-09T09:28:17.5808796+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>50</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>3</Slope>
      <PlateauTemperature>37</PlateauTemperature>
      <PlateauTime>1800</PlateauTime>
      <OverShootSlope1>3</OverShootSlope1>
      <OverShootTemperature>8.4</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>50</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>25</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>50</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="Roche_AVENIO_CGP_Fragmentation" creator="AF" dateTime="2022-06-09T09:29:28.483935+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>50</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>37</PlateauTemperature>
      <PlateauTime>1800</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>9</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>50</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>25</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>50</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="Roche_AVENIO_CGP_LigationPreparation" creator="AF" dateTime="2022-06-09T10:19:17.6259041+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>75</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>65</PlateauTemperature>
      <PlateauTime>1800</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>12.2</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>75</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>75</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>1.3</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>1.3</OverShootSlope1>
      <OverShootTemperature>3.3</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>75</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>25</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>75</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="Roche_AVENIO_CGP_PreCapturePCR_8" creator="AF" dateTime="2022-04-07T14:01:16.2246576+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>45</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>4</OverShootTemperature>
      <OverShootTime>13.3</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>4.6</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>9</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>2</GotoNumber>
      <LoopNumber>7</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>3</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>1.3</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>1.3</OverShootSlope1>
      <OverShootTemperature>3.3</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>25</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="Roche_AVENIO_CGP_PostCapturePCR_15" creator="AF" dateTime="2022-04-07T14:06:03.7246511+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>45</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>4</OverShootTemperature>
      <OverShootTime>13.3</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>4.6</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>9</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>2</GotoNumber>
      <LoopNumber>14</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>3</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>1.3</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>1.3</OverShootSlope1>
      <OverShootTemperature>3.3</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>25</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="Roche_AVENIO_CGP_OnDeckLigation" creator="AF" dateTime="2022-06-09T10:20:35.7623733+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>2</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>16</StartBlockTemperature>
    <StartLidTemperature>30</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>0.65</Slope>
      <PlateauTemperature>16</PlateauTemperature>
      <PlateauTime>43000</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>30</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="Roche_AVENIO_CGP_Block16Lid30" creator="Andreas Finke" dateTime="2022-06-09T10:19:53.1339351+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>2</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>75</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>0.65</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>30</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>0.18</Slope>
      <PlateauTemperature>16</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>30</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="Roche_AVENIO_CGP_Block25Lid110" creator="Andreas Finke" dateTime="2022-04-13T16:23:50.1052038+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>16</StartBlockTemperature>
    <StartLidTemperature>50</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>2</Slope>
      <PlateauTemperature>25</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="Roche_AVENIO_CGP_Block25Lid75" dateTime="2022-06-09T10:18:53.8345433+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>75</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>25</PlateauTemperature>
      <PlateauTime>120</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>85</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
</MethodSet>