<?xml version="1.0" encoding="utf-8"?>
<MethodSet>
  <PreMethod methodName="Init20Block30Lid" creator="Stephan Grosch" description="Pre method to heat up the lid to 30C and Block to 20C" dateTime="2021-04-13T11:27:33.0165772+02:00">
    <TargetBlockTemperature>20</TargetBlockTemperature>
    <TargetLidTemp>30</TargetLidTemp>
  </PreMethod>
  <PreMethod methodName="Init12Block30Lid" creator="Stephan Grosch" description="Preheat block to 12 C and Lid to 30C" dateTime="2021-04-13T11:28:04.957771+02:00">
    <TargetBlockTemperature>12</TargetBlockTemperature>
    <TargetLidTemp>30</TargetLidTemp>
  </PreMethod>
  <Method methodName="Dehumidify block" creator="Stephan Grosch" description="Heat up block for 2 minutes and coll down ot room temperature" dateTime="2021-05-12T19:15:20.48253+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>2</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>20</StartBlockTemperature>
    <StartLidTemperature>30</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>99</PlateauTemperature>
      <PlateauTime>60</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>3</OverShootTemperature>
      <OverShootTime>25.6</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>1.8</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>1.8</OverShootSlope1>
      <OverShootTemperature>5.7</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>1.2</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>1.2</OverShootSlope1>
      <OverShootTemperature>4</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>0.65</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>70</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="StorePlate12degrees" creator="Stephan Grosch" description="storing HSP at ODTC over night at 12 degrees. Lid = 30 degrees" dateTime="2021-05-12T19:15:34.4512182+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>20</StartBlockTemperature>
    <StartLidTemperature>30</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>0.23</Slope>
      <PlateauTemperature>12</PlateauTemperature>
      <PlateauTime>120</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>30</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
</MethodSet>