 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Roche\\Avenio CGP\\Library\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Roche\\Avenio CGP\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Roche\\Avenio CGP\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Roche\\Avenio CGP\\Library\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "HSLAppsLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Roche\\Avenio CGP\\Library\\InitWorkListLocation.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "VectorCustomDialogs\\VectorCustomDialogs.hsl" }
 namespace _Method { #include "AssignColorScheme\\ColorSchemeLibrary.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Roche\\Avenio CGP\\Library\\NGSStarLoading\\NGSStarLoading.hs_" }
 namespace _Method { #include "Stack_Reducer\\StackReducer.hs_" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Roche\\Avenio CGP\\Library\\NGSStarLoading\\NGSStarLoading.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Roche\\Avenio CGP\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "HSLMthLib.hsl" }
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Roche\\Avenio CGP\\Methods\\Avenio CGP.res"
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Roche\\Avenio CGP\\Library\\Tools\\Tools_Library.hs_" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Roche\\Avenio CGP\\Library\\NGSStarLoading\\ARW_Global.hsl" }
sequence t_seqMlStarSequenceNotUsed;
sequence t_seqMIDI_OnMagnet;
sequence t_seqHSP_Pipette;
sequence t_trpHSP_ODTC;
sequence t_trpHamiltonComfortLidODTC;
sequence t_trp_Stack1;
sequence t_trpHamiltonComfortLidStackParkPos;
sequence t_trp_Stack4;
sequence t_trpHSP_Pipette2;
sequence t_trpMIDI_Pipette;
sequence t_trpMIDI_OnMagnet;
sequence t_trpHSP_Waste;
sequence t_trpMIDI_Waste;
sequence t_seqMIDI_Pipette;
sequence t_seqHSP_Pipette2;
sequence t_trpHamiltonComfortLidWaste;
variable t_intHHS1_HSP1;
variable t_intHHS2_HSP2;
variable t_intHHS3_HSP3_MIDI3;
variable t_intHHS4_MIDI1;
variable t_intHHS5_MIDI2;
variable t_arrIndex1IDs[];
variable t_arrIndex1PositionIDs[];
variable t_arrIndex2IDs[];
variable t_arrIndex2PositionIDs[];
variable t_arrSamplePositionIDs[];
variable t_arrAdapterLigatioPlateLabwareID[];
variable t_arrAdapterLigationPlatePositionIDs[];
variable t_blnODTCused;
variable t_blnSendEmails;
variable t_strSerialNumberMLStar;
variable t_intSelectedIndexSTART;
variable t_intSelectedIndexSTOP;
variable t_strLocalIPAddressOfComputer;
variable t_strEmailAdress;
variable t_strDeviceAddressODTC;
variable t_intNumberOfSamplesFromFile;
variable t_intDeviceNumberODTC;
variable t_blnTestODTCWithShortDummyProtocol;
variable t_fltDiscardSupernatant_M5;
variable t_strODTCFolderXML;
variable t_blnShortenPreheat;
sequence t_seqHHS3_MIDI;
sequence t_trpHHS3_MIDI;
variable t_arrBlnProcessActivation[];
variable t_blnSkipLoadingRoutine;
sequence t_seqAspirate_Ethanol80;
sequence t_seq_IndexPlate_Pipette;
variable t_intRequestIDForActiveProtocol;
variable t_intTimeForProtocol;
variable l_arrEndDialogListInformation[];
variable t_blnStoreHSPoverNightWithinODTC;
variable t_blnStoreAtRoomTemperature;
variable t_blnSimulationMode;
variable t_blnUseMPHInsteadOfChannels;
variable t_strFullPathReportFile;
variable t_blnReduceDeckTo4ChannelSystem;
variable t_blnPostponedPrimerLoading;
sequence t_seqAspirate_NucleasefreeWater;
variable t_strODTCDirectory;
variable t_str_PlatformUsed;
variable t_strHamiltonDirectory;
variable t_blnActivateLockUnlockOfFrontCover;
variable l_intPlatformUsed;
variable l_int_rtnErrorDialog;
global device ML_STAR ("C:\\Program Files (x86)\\HAMILTON\\NGSStar\\Roche\\Avenio CGP\\Methods\\Avenio CGP.lay", "ML_STAR", hslTrue);
variable t_strTipCounterNameTip300;
variable t_strTipCounterNameTip50;
variable t_strTipCounterNameTip1000;
variable l_str_Text;
variable t_intMaxPlatesPerStackHSP;
variable t_intMaxPlatesPerStackMIDI;
variable t_intMaxComfortLidPerStack;
variable t_str_KitTitle;
variable t_str_KitSupplier;
variable t_blnMeasureVolumeWithinTroughs;
variable l_strLastMessage;
sequence l_seqTip50;
sequence l_seqTip1000;
sequence l_seqTip300;
variable t_intRequiredNumberOf50uLTipsP2;
variable t_intRequiredNumberOf300uLTipsP5;
variable t_intRequiredNumberOf1000uLTipsP9;
variable t_fltVolumeTransferLigationReaction;
variable t_intRequiredNumberOf50uLTipsP3;
variable t_intRequiredNumberOf300uLTipsP6;
variable t_fltVolumePolishingMix;
variable t_fltVolumeMixingP4;
variable t_fltVolumeCleanupBeads_P3;
variable t_intRequiredNumberOf50uLTipsP4;
variable t_intRequiredNumberOf300uLTipsP7;
variable t_intRequiredNumberOf50uLTipsP5;
variable t_intRequiredNumberOf300uLTipsP8;
variable t_fltVolumePanel;
variable t_fltVolumeCleanupBeads_P5;
variable t_intRequiredNumberOf50uLTipsP6;
variable t_intRequiredNumberOf300uLTipsP9;
variable t_fltVolumeNucleaseFreeWater_P5a;
variable t_fltVolumeEthanol_P10;
variable t_fltVolumeCleanupBeads_P6;
variable t_intRequiredNumberOf50uLTipsP7;
variable t_fltVolumeTransferHybReaction;
variable t_fltVolumeNucleaseFreeWater_P5b;
variable t_fltVolumeHybridizationWash1_Hot;
variable t_fltVolumeFragmentationMix;
variable t_intRequiredNumberOf50uLTipsP8;
variable t_fltVolumePrimerMix;
variable t_fltVolumeDiscardSupernatant_P3;
variable t_intRequiredNumberOf50uLTipsP9;
variable t_intRequiredNumberOf50uLTipsP10;
variable t_intRequiredNumberOf300uLTipsP10;
variable t_intRequiredNumberOf1000uLTipsP10;
variable t_fltVolumeUniversalAdapter;
variable t_fltVolumeTransferInput_P6;
variable t_fltVolumeHybridizationMix;
variable t_fltVolumeBeadWashBuffer;
variable t_fltVolume1stSupernatant_P10;
variable t_fltVolumeMixingLigationReaction;
variable t_intRequiredNumberOf1000uLTipsP1;
variable t_fltVolumeHybridizationSupplement;
variable t_intRequiredNumberOf1000uLTipsP2;
variable t_fltVolumePCRReactionMix_P4;
variable t_fltVolumeNucleaseFreeWater_P10;
variable t_fltVolumeAdapterLigationMix;
variable t_fltVolume1xBeadWashBufferSupernatant;
variable t_intRequiredNumberOf1000uLTipsP3;
variable t_fltVolumeEthanol_P5;
variable t_intRequiredNumberOf1000uLTipsP4;
variable t_fltVolumeUniversalEnhancingOligos;
variable t_fltVolumeStringentWashBuffer_hot1;
variable t_fltVolumeMixingPCRMasterMix;
variable t_fltVolumeEthanol_P6;
variable t_fltVolume1xBeadWashBufferResuspension;
variable t_fltVolume1stSupernatant_P6;
variable t_intRequiredNumberOf300uLTipsP1;
variable t_intRequiredNumberOf1000uLTipsP5;
variable t_fltVolumeTransferEluate_P3;
variable t_fltVolumeStringentWashBuffer_hot2;
variable t_fltVolumeHybridizationWash2;
variable t_fltVolumeDNAPrepMix;
variable t_fltVolumeCaptureBeadsSupernatant;
variable t_fltVolume1xBeadWashBuffer;
variable t_intRequiredNumberOf300uLTipsP2;
variable t_intRequiredNumberOf1000uLTipsP6;
variable t_fltVolumeHybridizationWash3;
variable t_intRequiredNumberOf300uLTipsP3;
variable t_intRequiredNumberOf1000uLTipsP7;
variable t_fltVolumePCRReactionMix_P9;
variable t_fltVolumeHybridizationWash1_RT;
variable t_fltVolumeEluate_P5;
variable t_intRequiredNumberOf50uLTipsP1;
variable t_intRequiredNumberOf300uLTipsP4;
variable t_intRequiredNumberOf1000uLTipsP8;
variable t_fltVolumeEluate_P6;
variable t_fltVolumeCleanupBeads_P10;
variable t_fltVolumeCaptureBeads;
sequence t_seqAspirate_BeadWashBuffer;
sequence t_seqAspirate_AvenioPanel;
sequence t_seqAspirate_PCRMasterMix;
sequence t_seqAspirate_FragmentationMasterMix;
sequence t_seqAspirate_HybridizationSupplement;
sequence t_seqAspirate_HybridizationMasterMix;
sequence t_seqAspirate_CleanUpBeads;
sequence t_seqAspirate_PCRReactionMix;
sequence t_seqAspirate_CaptureBeads;
sequence t_seqAspirate_PolishingMasterMix;
sequence t_seqAspirate_HybWashBuffer1;
sequence t_seqAspirate_LigationMasterMix;
sequence t_seqAspirate_HybWashBuffer2;
sequence t_seqAspirate_HybWashBuffer3;
sequence t_trpHSP_OnCPAC;
sequence t_seqHSP_OnCPAC;
variable t_blnAllowOnDeckLigation;
sequence t_seqAspirate_UniversalAdapter;
sequence t_seqAspirate_DNAPrepMasterMix;
variable t_intSelectionOvernightLigation;
timer Duration_on_deck_ligation;
variable t_strHoursOvernightLigation;
sequence t_seqHSP_Pipette2_73_96;
sequence t_seqHSP_Pipette2_25_48;
sequence t_seqMIDI_onMagnet_49_72;
sequence t_seqHSP_Pipette2_49_72;
sequence t_seqHSP_Pipette2_1_24;
sequence t_seqMIDI_onMagnet_1_24;
sequence t_seqMIDI_onMagnet_73_96;
sequence t_seqMIDI_onMagnet_25_48;
sequence t_seqMIDI_HHS3_1_24;
sequence t_seqMIDI_HHS3_73_96;
sequence t_seqMIDI_HHS3_25_48;
sequence t_seqMIDI_HHS3_49_72;
variable t_blnShiftSourceSequence;
variable t_blnAddFreshMIDItoStacker;
sequence t_trpHSP_Pipette;
sequence t_trpHSP_OnMagnet;
sequence t_seqMIDI_Pipette_73_96;
sequence t_seqMIDI_Pipette_25_48;
sequence t_seqMIDI_Pipette_1_24;
sequence t_trpHSP_HHS2;
sequence t_seqMIDI_Pipette_49_72;
sequence t_seqHSS2_HSP_1_24;
sequence t_seqHSS2_HSP_73_96;
sequence t_seqHSS2_HSP_25_48;
sequence t_seqHSS2_HSP_49_72;
sequence t_seqAspirate_StringentWashBuffer;
variable t_fltVolumeEluate_P8;
sequence t_seqHSP_OnMagnet;
variable t_fltVolumeNucleaseFreeWater_P8;
sequence t_seqAspirate_IndexPrimerMix;
variable t_blnOvernightLigation;
variable t_blnHSPOptimize;
variable t_blnMIDIOptimize;
variable t_blnAllowOptimization;
sequence t_seqAspirate_UniversalEnhancingOligos;
sequence t_seqMIDI_HHS5_73_96;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable l_intCOREGripper(2); // Choose transport tool CORE Gripper to perform transport steps with CORE gripper instead of iswap. Value = 2
    private variable l_strChannelPatternAbort;
    private variable l_intResultTipCheck;
    private variable l_intTransportTool;
    private variable l_int_OptionSelected;
    private variable loopCounter1;
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIP_PRESENT_CHECK_5ML_1ML::_InitLibrary();
    NGSSTARPREP::_InitLibrary();
    NGSSTARPROCESSES::_InitLibrary();
    COLORSCHEMELIBRARY::_InitLibrary();
    NGSSTARLOADING::_InitLibrary();
    STACKREDUCER::_InitLibrary();
    STAR_TIP_TOOLS::_InitLibrary();
    TOOLS_LIBRARY::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
    INIT_WORKLIST_LOCATION::LockLibrary();
    t_strTipCounterNameTip50 = Translate("50F_Counter");
    t_strTipCounterNameTip300 = Translate("SVF_Counter");
    t_strTipCounterNameTip1000 = Translate("1000F_Counter");
    t_blnAllowOnDeckLigation = ASWGLOBAL::BOOL::TRUE;
    t_blnAllowOptimization = ASWGLOBAL::BOOL::TRUE;
    t_blnSkipLoadingRoutine = ASWGLOBAL::BOOL::FALSE;
    t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::FALSE;
    t_blnReduceDeckTo4ChannelSystem = ASWGLOBAL::BOOL::FALSE;
    t_blnActivateLockUnlockOfFrontCover = ASWGLOBAL::BOOL::FALSE;
    t_blnMeasureVolumeWithinTroughs = ASWGLOBAL::BOOL::FALSE;
    t_strHamiltonDirectory = Translate("C:\\Program Files (x86)\\Hamilton\\");
    t_str_KitSupplier = Translate("Roche");
    t_str_KitTitle = Translate("AVENIO CGP");
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      t_str_PlatformUsed = Translate("ClinicalNGSStarlet");
      l_intPlatformUsed = 2;
      t_intMaxPlatesPerStackMIDI = 3;
      t_intMaxPlatesPerStackHSP = 5;
      t_intMaxComfortLidPerStack = 1;
    }
    else
    {
      t_str_PlatformUsed = Translate("NGSStar");
      l_intPlatformUsed = 1;
      t_intMaxPlatesPerStackMIDI = 4;
      t_intMaxPlatesPerStackHSP = 4;
      t_intMaxComfortLidPerStack = 5;
    }
    t_blnSimulationMode = Util::GetSimulationMode();
    t_strSerialNumberMLStar = GetSerialNumber(ML_STAR);
    NGSSTARPREP::DATA_HandOverSimulationModeForAllLocalSMTs(t_blnSimulationMode, ASWGLOBAL::BOOL::FALSE);
    l_intTransportTool = l_intCOREGripper;
    t_strEmailAdress = Translate("");
    t_strODTCDirectory = Translate("Files\\ODTC_scripts\\");
    t_strODTCDirectory = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), t_strODTCDirectory, Translate(""), Translate(""), Translate(""), Translate(""));
    t_blnODTCused = ASWGLOBAL::BOOL::TRUE;
    t_blnTestODTCWithShortDummyProtocol = ASWGLOBAL::BOOL::TRUE;
    if (t_blnTestODTCWithShortDummyProtocol == ASWGLOBAL::BOOL::TRUE)
    {
      t_strODTCFolderXML = StrConcat2(t_strODTCDirectory, Translate("Roche_AVENIO_CGP_shortGINIT.xml"));
    }
    else
    {
      t_strODTCFolderXML = StrConcat2(t_strODTCDirectory, Translate("Roche_AVENIO_CGP_GINIT.xml"));
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      t_strDeviceAddressODTC = "192.168.1.10";
      t_strLocalIPAddressOfComputer = "192.168.1.1";
    }
    else
    {
      t_strDeviceAddressODTC = "No ODTC used";
    }
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    COLORSCHEMELIBRARY::Assign(0);
    VectorCustomDialogs::Initialize();
    l_str_Text = StrConcat12(Translate("Dear user, \n\n"), Translate("This method is prepared to send emails with MailAlert.exe. \n"), Translate("Install MailAlert v1.08 into following folder : \n"), Translate("\nC:\Program Files (x86)\HAMILTON\NGSStar\MailAlert\n"), Translate("\nFeel free to create new methods using the tool : \n"), Translate("\nNEW NGS Set Up V2.4.med\n"), Translate("This additional method will create the correct folder structure, redirect the labware and will \n"), Translate("copy all needed files for you. \n"), Translate("You can find the method at : C:\Program Files (x86)\HAMILTON\NGSStar.\n"), Translate("\nPurpose of this test framework method:  \n \nThis method will show you examples to use the tools provided by the NGSStar framework.  \nKeep in mind that not all platform versions might support all options + ODTC, + MPH.  \nEven if you could convert the platform Ц ensure that the workflow is realizable using the platform specific resources.  \n(Number of HHS, tips, troughsЕ). \n"), Translate(" \n"), Translate("Best regards - your development team."));
    NGSSTARLOADING::Display_Message_Dialog(l_str_Text);
    VectorCustomDialogs::ShowStatusDialog(Translate("Roche AVENIO Tumor Tissue CGP Kit"));
    VectorCustomDialogs::SetStatusText(Translate("Run Preparation..."));
    VectorCustomDialogs::SetStatusText(Translate("   Initializing Liquid Waste Sensor..."));
    if(0){
      NGSSTARPREP::LiquidWasteSensor_Init(2);
    }
    VectorCustomDialogs::SetStatusText(Translate("   Initializing CPAC chiller..."));
    NGSSTARPREP::CPAC_Init();
    VectorCustomDialogs::SetStatusText(Translate("   Initializing Hamilton Heater Shakers (HHSs)..."));
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::HHS_Init(t_intHHS3_HSP3_MIDI3, t_intHHS2_HSP2, t_intHHS1_HSP1, t_intHHS4_MIDI1, t_intHHS5_MIDI2, Translate("TCC"), Translate("0"), Translate("0"), Translate("0"), Translate("0"), ML_STAR);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS3_HSP3_MIDI3, 0);
    }
    else
    {
      NGSSTARPREP::HHS_Init(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2, Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), ML_STAR);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS1_HSP1, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS2_HSP2, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS3_HSP3_MIDI3, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS4_MIDI1, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS5_MIDI2, 0);
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_Init(t_strDeviceAddressODTC, t_intDeviceNumberODTC, t_strLocalIPAddressOfComputer);
    }
    NGSSTARPROCESSES::DATA_HandoverSequencesAndDataToSMT(ML_STAR, l_intTransportTool, t_str_KitSupplier, t_str_KitTitle, ASWGLOBAL::BOOL::FALSE, t_blnReduceDeckTo4ChannelSystem, t_strEmailAdress, t_blnActivateLockUnlockOfFrontCover, t_strFullPathReportFile, t_blnUseMPHInsteadOfChannels, l_intPlatformUsed, t_strTipCounterNameTip50, t_strTipCounterNameTip300, t_strTipCounterNameTip1000, l_seqTip50, l_seqTip300, l_seqTip1000);
    NGSSTARLOADING::DATA_HandOverDataToSMT_NGSStarLoading(t_strFullPathReportFile, l_intPlatformUsed, t_str_KitSupplier, t_str_KitTitle, t_blnUseMPHInsteadOfChannels, t_blnActivateLockUnlockOfFrontCover, t_strTipCounterNameTip50, t_strTipCounterNameTip300, t_strTipCounterNameTip1000, l_seqTip50, l_seqTip300, l_seqTip1000, ASWGLOBAL::BOOL::FALSE);
    _SelectProcesses();
    if (t_intSelectedIndexSTART == 3)
    {
      VectorCustomDialogs::AppendStatusText(Translate("> Set CPAC to 20C"));
      NGSSTARPREP::CPAC_SetTemperature(20);
    }
    else
    {
      if (t_intSelectedIndexSTOP == 4)
      {
        VectorCustomDialogs::AppendStatusText(Translate("> Set CPAC to 20C"));
        NGSSTARPREP::CPAC_SetTemperature(20);
      }
      else
      {
        VectorCustomDialogs::AppendStatusText(Translate("> Set CPAC to 10C"));
        NGSSTARPREP::CPAC_SetTemperature(10);
      }
    }
    NGSSTARPREP::CPAC_SetTemperature(10);
    SeqRemoveAll(t_seqMlStarSequenceNotUsed);
    VectorCustomDialogs::SetStatusText(Translate("   Resources required..."));
    _CalculateAndLoadConsumables();
    NGSSTARPROCESSES::DATA_TrackDataFromLoadingSMT(g_int_TotalNumberOf50Tips, g_int_TotalNumberOf300Tips, g_int_TotalNumberOf1000Tips, t_intNumberOfSamplesFromFile);
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process01_DNAPolishingAndFragmentation();
      Process02_PrepareAndInitiateAdapterLigation();
    }
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process03_PostLigationCleanUp();
      Process04_PerformPreCaptureAmplification();
      Process05_CleanUpPreCaptureAmplification();
    }
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process06_SetupHybridization();
    }
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process07_PrepareCaptureBeads();
      Process08_PerformHybridizationCleanUp();
    }
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process09_AmplifyEnrichedFFPEDNASample();
      Process10_CleanUpAmplifiedEnrichedLibraries();
    }
    Trace ("********** t_blnStoreHSPoverNightWithinODTC:  ",t_blnStoreHSPoverNightWithinODTC);
    if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
    {
      ProcessX_StoreHSPWithinODTCOverNight(ML_STAR.HSP_Pipette2, t_blnStoreAtRoomTemperature);
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to unload all carriers?"), Translate("Yes"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to unload all carriers?"), Translate("No"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to defragment the tip racks?"), Translate("Yes"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to defragment the tip racks?"), Translate("No"));
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(5);
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(5, Translate("Do you want to defragment the tip racks?"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      VectorCustomDialogs::SetStatusText(Translate("Defragment tip racks..."));
      NGSSTARPROCESSES::PIP_DefragmentTipRacks(ML_STAR);
    }
    VectorCustomDialogs::SetStatusText(Translate(" ииииииииииииии METHOD COMPLETED ииииииииииииии "));
    NGSSTARLOADING::Display_Message_Dialog(Translate("Method completed successfully. Press OK to start the run."));
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(5, Translate("Do you want to unload all carriers?"), l_int_OptionSelected);
    Trace("Option selected : ",l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      VectorCustomDialogs::SetStatusText(Translate("Unloading the deck..."));
      MECC::TraceComment(Translate("***** Unload Carriers *****"));
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      else
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
    }
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_1 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_1 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    l_strLastMessage = StrConcat8(Translate("Dear user, \n"), Translate(""), Translate("check your system :  \n\n"), Translate(""), Translate("1) Check / empty the tip waste, \n"), Translate("2) Check / empty the liquid waste container, \n"), Translate("3) Remove and store reagents and created plates. \n"), Translate(""));
    NGSSTARLOADING::Display_Message_Dialog(l_strLastMessage);
    VectorCustomDialogs::SetStatusText(Translate("Preparing for run shutdown..."));
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::PIP_CleanUpTipAdapter(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    }
    NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
    NGSSTARPREP::HHS_Terminate(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2);
    NGSSTARPREP::CPAC_Terminate();
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_Terminate(t_intDeviceNumberODTC, ASWGLOBAL::BOOL::FALSE);
    }
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      l_intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, l_strChannelPatternAbort, 4);
    }
    else
    {
      l_intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, l_strChannelPatternAbort, 8);
    }
    if (l_intResultTipCheck == 1)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("Workflow completed"), Translate("All selected processes have been completed successfully. Clean the deck and empty the liquid waste."));
    }
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
    VectorCustomDialogs::Terminate();
    TIP_PRESENT_CHECK_5ML_1ML::_ExitLibrary();
    NGSSTARPREP::_ExitLibrary();
    NGSSTARPROCESSES::_ExitLibrary();
    COLORSCHEMELIBRARY::_ExitLibrary();
    NGSSTARLOADING::_ExitLibrary();
    STACKREDUCER::_ExitLibrary();
    STAR_TIP_TOOLS::_ExitLibrary();
    TOOLS_LIBRARY::_ExitLibrary();
  } }
