private function Process01_DNAPolishingAndFragmentation(  ) void ;
private function Process02_PrepareAndInitiateAdapterLigation(  ) void ;
private function Process03_PostLigationCleanUp(  ) void ;
private function Process04_PerformPreCaptureAmplification(  ) void ;
private function Process05_CleanUpPreCaptureAmplification(  ) void ;
private function Process06_SetupHybridization(  ) void ;
private function Process07_PrepareCaptureBeads(  ) void ;
private function Process08_PerformHybridizationCleanUp(  ) void ;
private function Process09_AmplifyEnrichedFFPEDNASample(  ) void ;
private function Process10_CleanUpAmplifiedEnrichedLibraries(  ) void ;
private function ProcessX_StoreHSPWithinODTCOverNight( sequence & i_trpHSP, variable i_blnIncubateODTCWithoutActiveCooling ) void ;
private function _CalculateAndLoadConsumables(  ) void ;
private function _SelectProcesses(  ) void ;
private function _VersionHistory(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private variable l_strChannelPatternAbort;
  private variable l_intResultTipCheck;
  private variable l_retValueDialog;
  MECC::TraceComment(Translate("\n\n\nON ABORT STARTS TO SHUT DOWN DEVICES\n\n"));
  VectorCustomDialogs::SetStatusText(Translate("จจจจจจจจจจจจจจจจMETHOD ABORTEDจจจจจจจจจจจจจจจจ"));
  if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_SendEmail(Translate("Method aborted"), Translate("Read report file and logfile. Clean the deck and empty the liquid waste."));
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_Terminate(t_intDeviceNumberODTC, ASWGLOBAL::BOOL::TRUE);
  }
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  l_arrEndDialogListInformation.SetSize(0);
  l_arrEndDialogListInformation.AddAsLast(Translate("1) Check / empty the tip waste, "));
  l_arrEndDialogListInformation.AddAsLast(Translate("2) Check / empty the liquid waste container,"));
  l_arrEndDialogListInformation.AddAsLast(Translate("3) Remove and store reagents and created plates."));
  l_retValueDialog = VectorCustomDialogs::ListDialog(Translate("Method aborted."), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 60, Translate(""), Translate("Press OK to terminate all active devices and close the method."), l_arrEndDialogListInformation);
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  NGSSTARPREP::HHS_Terminate(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2);
  NGSSTARPREP::CPAC_Terminate();
  l_intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, l_strChannelPatternAbort, 8);
  if (l_intResultTipCheck == 1)
  {
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  else
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }
  VectorCustomDialogs::Terminate();
}

private function _VersionHistory(  ) void {
}

private function _CalculateAndLoadConsumables(  ) void {
  private variable l_intNumberOf50uLTips;
  private variable l_intNumberOfMIDIPlates;
  private variable l_intNumberOf1000uLTips;
  private variable l_intNumberOf300uLTips;
  private variable l_intNumberOfHSPPlates;
  private variable l_intNumberOfHamiltonComfortLids;
  private variable l_blnInputplateAlreadyLoaded;
  private variable l_blnHamiltonComfortLidAlreadyLoaded;
  private variable l_intNumberOf300ExtraTips;
  private variable l_intNumberOf50ExtraTips;
  private sequence l_arr_seqReagentsOn50mlContainers[];
  private variable l_bln_CarrierLoadable;
  private sequence t_seqAspirate_Ethanol80_distinct;
  private sequence t_seqAspirate_NucleasefreeWater_distinct;
  private sequence t_trp_IndexPlate_Pipette;
  private variable l_arr_fltReagentVolumesOn50mlContainerEthanol80[];
  private variable l_arr_strReagentNamesOn50mlContainers[];
  private variable l_arr_fltReagentVolumesOn50mlContainerNucleaseFreeWater[];
  private variable l_arr_fltReagentVolumesOnTubeAdapterFragmentationMasterMix[];
  private variable l_arr_fltReagentVolumesOn50mlContainers[];
  private sequence t_seqAspirate_PolishingMasterMix_distinct;
  private sequence t_seqAspirate_FragmentationMasterMix_distinct;
  private variable l_arr_fltReagentVolumesOnTubeAdapterPolishingMasterMix[];
  private sequence t_seqAspirate_PCRMasterMix_distinct;
  private sequence t_seqAspirate_HybWashBuffer2_distinct;
  private sequence t_seqAspirate_StringentWashBuffer_distinct;
  private sequence t_seqAspirate_UniversalEnhancingOligos_distinct;
  private sequence t_seqAspirate_HybridizationSupplement_distinct;
  private sequence t_seqAspirate_UniversalAdapter_distinct;
  private sequence t_seqAspirate_LigationMasterMix_distinct;
  private sequence t_seqAspirate_HybWashBuffer3_distinct;
  private sequence t_seqAspirate_AvenioPanel_distinct;
  private sequence t_seqAspirate_CaptureBeads_distinct;
  private sequence t_seqAspirate_HybWashBuffer1_distinct;
  private sequence t_seqAspirate_BeadWashBuffer_distinct;
  private sequence t_seqAspirate_PCRReactionMix_distinct;
  private sequence t_seqAspirate_CleanUpBeads_distinct;
  private sequence t_seqAspirate_HybridizationMasterMix_distinct;
  private variable l_arr_fltReagentVolumesInReagentCarrierPCRReactionMix[];
  private variable l_arr_fltReagentVolumesOn50mlContainersHybWashBuffer1[];
  private variable l_arr_fltReagentVolumesInReagentCarrierAvenioPanel[];
  private variable l_arr_fltReagentVolumesOn50mlContainersHybWashBuffer2[];
  private variable l_arr_fltReagentVolumesOn50mlContainersHybWashBuffer3[];
  private variable l_arr_fltReagentVolumesInReagentCarrierLigationMasterMix[];
  private variable l_arr_fltReagentVolumesInReagentCarrierUniversalEnhancingOligos[];
  private variable l_arr_fltReagentVolumesInReagentCarrierUniversalAdapter[];
  private variable l_arr_fltReagentVolumesInReagentCarrierPCRMasterMix[];
  private variable l_arr_fltReagentVolumesOn50mlContainerBeadWashBuffer[];
  private variable l_arr_fltReagentVolumesInReagentCarrierHybridizationSupplement[];
  private variable l_arr_fltReagentVolumesInReagentCarrierHybridizationMasterMix[];
  private variable l_arr_fltReagentVolumesInReagentCarrierCaptureBeads[];
  private variable l_arr_fltReagentVolumesOn50mlContainersStringentWashBuffer[];
  private sequence t_seqAspirate_DNAPrepMasterMix_distinct;
  private variable l_arr_fltReagentVolumesOnTubeDNAPrepMasterMix[];
  private variable l_arr_fltReagentVolumesOn2mlContainerCleanupBeads[];
  private variable l_intNumberOfBeadWashBufferTubes;
  private variable l_intNumberOfStringentWashBufferTubes;
  private variable l_intNumberOfCleanUpBeadTubes;
  private variable t_intRequiredNumberOf1000uLTipsP3_Extra;
  private variable t_intRequiredNumberOf1000uLTipsP5_Extra;
  private variable t_intRequiredNumberOf1000uLTipsP6_Extra;
  private variable t_intRequiredNumberOf1000uLTipsP7_Extra;
  private variable l_intNumberOfCaptureBeadTubes;
  MECC::TraceComment(Translate("--------------- CalculateAndLoadConsumables"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Calculate and load consumables"), ASWGLOBAL::BOOL::YES);
  l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::FALSE;
  t_blnPostponedPrimerLoading = ASWGLOBAL::BOOL::FALSE;
  l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::FALSE;
  if (t_intNumberOfSamplesFromFile <= 8)
  {
    l_intNumberOfBeadWashBufferTubes = 1;
    l_intNumberOfStringentWashBufferTubes = 1;
  }
  else
  {
    if (t_intNumberOfSamplesFromFile <= 16)
    {
      l_intNumberOfBeadWashBufferTubes = 2;
      l_intNumberOfStringentWashBufferTubes = 2;
    }
    else
    {
      l_intNumberOfBeadWashBufferTubes = 4;
      l_intNumberOfStringentWashBufferTubes = 4;
    }
  }
  if (t_intNumberOfSamplesFromFile <= 12)
  {
    l_intNumberOfCleanUpBeadTubes = 2;
    l_intNumberOfCaptureBeadTubes = 1;
  }
  else
  {
    l_intNumberOfCleanUpBeadTubes = 4;
    l_intNumberOfCaptureBeadTubes = 2;
  }
  MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess 1: DNA Polishing, Fragmentation and Ligation\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_blnPostponedPrimerLoading = ASWGLOBAL::BOOL::TRUE;
    Trace ("Total calculated volumes of reagents for M1 for ", t_intNumberOfSamplesFromFile, " samples");
    t_fltVolumePolishingMix = NGSSTARLOADING::Define_VolumePerWell(Translate("DNA Polishing Master Mix"), 4.5);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("DNA Polishing Master Mix"), Translate("DNA Polishing Enzyme (diluted 1:50)"), 1);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("DNA Polishing Master Mix"), Translate("Fragmentation Buffer (10x)"), 3.5);
    t_fltVolumeFragmentationMix = NGSSTARLOADING::Define_VolumePerWell(Translate("DNA Fragmentation Master Mix"), 15);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("DNA Fragmentation Master Mix"), Translate("Fragmentation Buffer (10x)"), 1.5);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("DNA Fragmentation Master Mix"), Translate("Fragmentation Enzyme"), 10);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("DNA Fragmentation Master Mix"), Translate("Nuclease-free water for mastermix"), 3.5);
    l_intNumberOfMIDIPlates = 0;
    l_intNumberOfHSPPlates = 0;
    l_intNumberOfHamiltonComfortLids = 1;
    l_intNumberOf1000uLTips = 0;
    l_intNumberOf50ExtraTips = 0;
    t_intRequiredNumberOf50uLTipsP1 = 2 * t_intNumberOfSamplesFromFile;
    t_intRequiredNumberOf50uLTipsP1 = t_intRequiredNumberOf50uLTipsP1 + l_intNumberOf50ExtraTips;
    t_intRequiredNumberOf300uLTipsP1 = 0;
    l_intNumberOf300ExtraTips = 0;
    t_intRequiredNumberOf300uLTipsP1 = t_intRequiredNumberOf300uLTipsP1 + l_intNumberOf300ExtraTips;
    l_intNumberOf1000uLTips = l_intNumberOf1000uLTips + t_intRequiredNumberOf1000uLTipsP1;
    l_intNumberOf300uLTips = l_intNumberOf300uLTips + t_intRequiredNumberOf300uLTipsP1;
    l_intNumberOf50uLTips = l_intNumberOf50uLTips + t_intRequiredNumberOf50uLTipsP1;
    l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    t_fltVolumeDNAPrepMix = NGSSTARLOADING::Define_VolumePerWell(Translate("DNA Preparation Master Mix"), 10);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("DNA Preparation Master Mix"), Translate("DNA Preparation Buffer"), 7);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("DNA Preparation Master Mix"), Translate("DNA Preparation Enzyme"), 3);
    t_fltVolumeAdapterLigationMix = NGSSTARLOADING::Define_VolumePerWell(Translate("Ligation Master Mix"), 40);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Ligation Master Mix"), Translate("Ligation Buffer"), 30);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Ligation Master Mix"), Translate("DNA Ligase"), 10);
    t_fltVolumeUniversalAdapter = NGSSTARLOADING::Define_VolumePerWell(Translate("Universal Adapter"), 10);
    t_fltVolumeMixingLigationReaction = 80;
    if(0){
      l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    }
    l_intNumberOf50ExtraTips = 0;
    t_intRequiredNumberOf50uLTipsP2 = 2 * t_intNumberOfSamplesFromFile;
    t_intRequiredNumberOf50uLTipsP2 = t_intRequiredNumberOf50uLTipsP2 + l_intNumberOf50ExtraTips;
    l_intNumberOf300ExtraTips = 0;
    t_intRequiredNumberOf300uLTipsP2 = 1 * t_intNumberOfSamplesFromFile;
    t_intRequiredNumberOf300uLTipsP2 = t_intRequiredNumberOf300uLTipsP2 + l_intNumberOf300ExtraTips;
    t_intRequiredNumberOf1000uLTipsP2 = 0;
    l_intNumberOf1000uLTips = l_intNumberOf1000uLTips + t_intRequiredNumberOf1000uLTipsP2;
    l_intNumberOf300uLTips = l_intNumberOf300uLTips + t_intRequiredNumberOf300uLTipsP2;
    l_intNumberOf50uLTips = l_intNumberOf50uLTips + t_intRequiredNumberOf50uLTipsP2;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Sample Input HSP-Plate (30.5 uL)"), 1, ML_STAR.HSP_Pipette2, 0);
    if(0){
      if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("HSP with fragmented DNA (50 uL)"), 1, ML_STAR.HSP_Pipette2, 0);
        l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
      }
    }
  }
  MECC::TraceComment(Translate("---------------------------------------------------------------------------\nSection 2_Post-Ligation Cleanup, PCR Amplifcation, PCR Cleanup\n---------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_blnPostponedPrimerLoading = ASWGLOBAL::BOOL::TRUE;
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("************ t_blnHSPOptimize:   "), t_blnHSPOptimize);
    MECC::TraceComment(Translate("********** If APS allows the Optimization the plate use (t_blnAllowOptimization = true) the INPUT PCR plate is also the output plate. No additional plate is necessary. *********"));
    if (t_blnAllowOptimization == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("********** t_blnAllowOptimization = true *********\n********** no additional PCR plate necessary *********\n********** Samples will be located in Columns 7 - 9 of the output plate **********"));
      l_intNumberOfHSPPlates = 1;
      l_intNumberOfMIDIPlates = 1;
    }
    else
    {
      MECC::TraceComment(Translate("********** t_blnAllowOptimization = false *********\n********** additional PCR plate necessary *********\n********** Samples will be located in Columns 1 - 3 of the output plate **********"));
      l_intNumberOfHSPPlates = 2;
      l_intNumberOfMIDIPlates = 2;
    }
    if (l_blnHamiltonComfortLidAlreadyLoaded == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfHamiltonComfortLids = 0;
    }
    else
    {
      l_intNumberOfHamiltonComfortLids = 1;
    }
    l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    t_fltVolumeCleanupBeads_P3 = NGSSTARLOADING::Define_VolumePerWell(Translate("Cleanup Beads"), 110);
    t_fltVolumeTransferLigationReaction = 110;
    t_fltVolumeDiscardSupernatant_P3 = 220;
    t_fltVolumePrimerMix = 25;
    t_fltVolumeTransferEluate_P3 = 25;
    NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 200);
    NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 200);
    t_intRequiredNumberOf50uLTipsP3 = 2 * t_intNumberOfSamplesFromFile;
    l_intNumberOf50ExtraTips = 0;
    t_intRequiredNumberOf50uLTipsP3 = t_intRequiredNumberOf50uLTipsP3 + l_intNumberOf50ExtraTips;
    t_intRequiredNumberOf300uLTipsP3 = 5 * t_intNumberOfSamplesFromFile;
    l_intNumberOf300ExtraTips = 0;
    t_intRequiredNumberOf300uLTipsP3 = t_intRequiredNumberOf300uLTipsP3 + l_intNumberOf300ExtraTips;
    t_intRequiredNumberOf1000uLTipsP3 = 16;
    t_intRequiredNumberOf1000uLTipsP3_Extra = l_intNumberOfCleanUpBeadTubes;
    t_intRequiredNumberOf1000uLTipsP3 = t_intRequiredNumberOf1000uLTipsP3 + t_intRequiredNumberOf1000uLTipsP3_Extra;
    l_intNumberOf1000uLTips = l_intNumberOf1000uLTips + t_intRequiredNumberOf1000uLTipsP3;
    l_intNumberOf300uLTips = l_intNumberOf300uLTips + t_intRequiredNumberOf300uLTipsP3;
    l_intNumberOf50uLTips = l_intNumberOf50uLTips + t_intRequiredNumberOf50uLTipsP3;
    t_fltVolumePCRReactionMix_P4 = NGSSTARLOADING::Define_VolumePerWell(Translate("PCR Reaction Mix"), 25);
    t_fltVolumeMixingP4 = 40;
    t_intRequiredNumberOf1000uLTipsP4 = 0;
    t_intRequiredNumberOf300uLTipsP4 = 0;
    l_intNumberOf300ExtraTips = 0;
    t_intRequiredNumberOf300uLTipsP4 = t_intRequiredNumberOf300uLTipsP4 + l_intNumberOf300ExtraTips;
    t_intRequiredNumberOf50uLTipsP4 = 1 * t_intNumberOfSamplesFromFile;
    l_intNumberOf50ExtraTips = 0;
    t_intRequiredNumberOf50uLTipsP4 = t_intRequiredNumberOf50uLTipsP4 + l_intNumberOf50ExtraTips;
    l_intNumberOf1000uLTips = l_intNumberOf1000uLTips + t_intRequiredNumberOf1000uLTipsP4;
    l_intNumberOf300uLTips = l_intNumberOf300uLTips + t_intRequiredNumberOf300uLTipsP4;
    l_intNumberOf50uLTips = l_intNumberOf50uLTips + t_intRequiredNumberOf50uLTipsP4;
    t_fltVolumeCleanupBeads_P5 = NGSSTARLOADING::Define_VolumePerWell(Translate("Cleanup Beads"), 50);
    t_fltVolumeCleanupBeads_P5 = NGSSTARLOADING::Define_VolumePerWell(Translate("Cleanup Beads"), 50);
    t_fltVolumeNucleaseFreeWater_P5a = NGSSTARLOADING::Define_VolumePerWell(Translate("Nuclease-free water"), 50.0);
    t_fltVolumeEthanol_P5 = NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 400);
    t_fltVolumeNucleaseFreeWater_P5b = NGSSTARLOADING::Define_VolumePerWell(Translate("Nuclease-free water"), 40.0);
    t_fltVolumeEluate_P5 = 40;
    t_fltDiscardSupernatant_M5 = 200;
    t_intRequiredNumberOf50uLTipsP5 = 4 * t_intNumberOfSamplesFromFile;
    l_intNumberOf50ExtraTips = 0;
    t_intRequiredNumberOf50uLTipsP5 = t_intRequiredNumberOf50uLTipsP5 + l_intNumberOf50ExtraTips;
    t_intRequiredNumberOf300uLTipsP5 = 6 * t_intNumberOfSamplesFromFile;
    l_intNumberOf300ExtraTips = 0;
    t_intRequiredNumberOf300uLTipsP5 = t_intRequiredNumberOf300uLTipsP5 + l_intNumberOf300ExtraTips;
    t_intRequiredNumberOf1000uLTipsP5 = 16;
    t_intRequiredNumberOf1000uLTipsP5_Extra = l_intNumberOfCleanUpBeadTubes;
    t_intRequiredNumberOf1000uLTipsP5 = t_intRequiredNumberOf1000uLTipsP5 + t_intRequiredNumberOf1000uLTipsP5_Extra;
    l_intNumberOf1000uLTips = l_intNumberOf1000uLTips + t_intRequiredNumberOf1000uLTipsP5;
    l_intNumberOf300uLTips = l_intNumberOf300uLTips + t_intRequiredNumberOf300uLTipsP5;
    l_intNumberOf50uLTips = l_intNumberOf50uLTips + t_intRequiredNumberOf50uLTipsP5;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("HSP containing resuspended PCR primers "), 1, ML_STAR.HSP_Pipette, 0);
    if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("HSP containing ligation reaction (110 uL)"), 1, ML_STAR.HSP_Pipette2, 0);
      l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    }
  }
  MECC::TraceComment(Translate("-------------------------------------------------------------------------------------------------------------------------------------------------------------------------\nSection 3: Prepare Hybridization\n-------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltVolumeTransferInput_P6 = 30;
    t_fltVolume1stSupernatant_P6 = 270;
    t_fltVolumeHybridizationSupplement = NGSSTARLOADING::Define_VolumePerWell(Translate("Hybridization Supplement"), 60);
    t_fltVolumeCleanupBeads_P6 = NGSSTARLOADING::Define_VolumePerWell(Translate("Cleanup Beads"), 180);
    t_fltVolumeHybridizationMix = NGSSTARLOADING::Define_VolumePerWell(Translate("Hybridization Master Mix"), 43);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Hybridization Master Mix"), Translate("Hybridization Buffer 1 (2x)"), 31);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Hybridization Master Mix"), Translate("Hybridization Buffer 2"), 12);
    t_fltVolumeEthanol_P6 = NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 200);
    t_fltVolumeUniversalEnhancingOligos = NGSSTARLOADING::Define_VolumePerWell(Translate("Universal Enhancing Oligos"), 13.4);
    t_fltVolumeEluate_P6 = 56.3;
    t_fltVolumePanel = NGSSTARLOADING::Define_VolumePerWell(Translate("Avenio Tumor Tissue CGP Panel"), 4);
    t_fltVolumeEluate_P5 = 40;
    if (t_blnAllowOptimization == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfMIDIPlates = 0;
    }
    else
    {
      l_intNumberOfMIDIPlates = 1;
    }
    l_intNumberOfHSPPlates = 1;
    t_intRequiredNumberOf1000uLTipsP6 = 8;
    t_intRequiredNumberOf1000uLTipsP6_Extra = l_intNumberOfCleanUpBeadTubes;
    t_intRequiredNumberOf1000uLTipsP6 = t_intRequiredNumberOf1000uLTipsP6 + t_intRequiredNumberOf1000uLTipsP6_Extra;
    t_intRequiredNumberOf50uLTipsP6 = 4 * t_intNumberOfSamplesFromFile;
    l_intNumberOf50ExtraTips = 0;
    t_intRequiredNumberOf50uLTipsP6 = t_intRequiredNumberOf50uLTipsP6 + l_intNumberOf50ExtraTips;
    t_intRequiredNumberOf300uLTipsP6 = 4 * t_intNumberOfSamplesFromFile;
    l_intNumberOf300ExtraTips = 8;
    t_intRequiredNumberOf300uLTipsP6 = t_intRequiredNumberOf300uLTipsP6 + l_intNumberOf300ExtraTips;
    l_intNumberOf1000uLTips = l_intNumberOf1000uLTips + t_intRequiredNumberOf1000uLTipsP6;
    l_intNumberOf300uLTips = l_intNumberOf300uLTips + t_intRequiredNumberOf300uLTipsP6;
    l_intNumberOf50uLTips = l_intNumberOf50uLTips + t_intRequiredNumberOf50uLTipsP6;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("HSP containg the PCR Amplification Reaction (50 uL)"), 1, ML_STAR.HSP_Pipette2, 0);
      l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    }
    if (t_blnAllowOptimization == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, Translate("used MIDI plate (columns 7 - 9 unused)"), 1, ML_STAR.MIDI_Pipette, 0);
    }
  }
  MECC::TraceComment(Translate("-------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n Section 4: Prepare Capture Beads & Hybridization CleanUp\n-------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnAllowOptimization == ASWGLOBAL::BOOL::FALSE)
    {
      l_intNumberOfMIDIPlates = 1;
    }
    else
    {
      l_intNumberOfMIDIPlates = 0;
    }
    l_intNumberOfHSPPlates = 2;
    l_intNumberOfHamiltonComfortLids = 0;
    t_fltVolumeBeadWashBuffer = NGSSTARLOADING::Define_VolumePerWell(Translate("Bead Wash Buffer (1x)"), 375);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Bead Wash Buffer (1x)"), Translate("Bead Wash Buffer (2.5x)"), 150);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Bead Wash Buffer (1x)"), Translate("PCR grade water"), 225);
    t_fltVolumeCaptureBeads = NGSSTARLOADING::Define_VolumePerWell(Translate("Capture Beads"), 75);
    t_fltVolumeCaptureBeadsSupernatant = 75;
    t_fltVolume1xBeadWashBuffer = 150;
    t_fltVolume1xBeadWashBufferSupernatant = 150;
    t_fltVolume1xBeadWashBufferResuspension = 75;
    t_intRequiredNumberOf50uLTipsP7 = 0 * t_intNumberOfSamplesFromFile;
    l_intNumberOf50ExtraTips = 0;
    t_intRequiredNumberOf50uLTipsP7 = t_intRequiredNumberOf50uLTipsP7 + l_intNumberOf50ExtraTips;
    t_intRequiredNumberOf300uLTipsP7 = 3 * t_intNumberOfSamplesFromFile;
    l_intNumberOf300ExtraTips = 16;
    t_intRequiredNumberOf300uLTipsP7 = t_intRequiredNumberOf300uLTipsP7 + l_intNumberOf300ExtraTips;
    t_intRequiredNumberOf1000uLTipsP7 = 16;
    t_intRequiredNumberOf1000uLTipsP7_Extra = l_intNumberOfCaptureBeadTubes;
    t_intRequiredNumberOf1000uLTipsP7 = t_intRequiredNumberOf1000uLTipsP7 + t_intRequiredNumberOf1000uLTipsP7_Extra;
    l_intNumberOf1000uLTips = l_intNumberOf1000uLTips + t_intRequiredNumberOf1000uLTipsP7;
    l_intNumberOf300uLTips = l_intNumberOf300uLTips + t_intRequiredNumberOf300uLTipsP7;
    l_intNumberOf50uLTips = l_intNumberOf50uLTips + t_intRequiredNumberOf50uLTipsP7;
    t_fltVolumeCaptureBeadsSupernatant = 75;
    t_fltVolumeTransferHybReaction = 63;
    t_fltVolume1stSupernatant_P6 = 270;
    t_fltVolumeHybridizationWash1_Hot = NGSSTARLOADING::Define_VolumePerWell(Translate("Hybridization Wash Buffer 1"), 110);
    t_fltVolumeHybridizationWash1_RT = NGSSTARLOADING::Define_VolumePerWell(Translate("Hybridization Wash Buffer 1"), 200);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Hybridization Wash Buffer 1"), Translate("Hybridization Wash 1 (10x)"), 33);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Hybridization Wash Buffer 1"), Translate("PCR-grade water"), 277);
    t_fltVolumeStringentWashBuffer_hot1 = NGSSTARLOADING::Define_VolumePerWell(Translate("Stringent Wash Buffer"), 210);
    t_fltVolumeStringentWashBuffer_hot2 = NGSSTARLOADING::Define_VolumePerWell(Translate("Stringent Wash Buffer"), 210);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Stringent Wash Buffer"), Translate("Stringent Wash Buffer (10x)"), 42);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Stringent Wash Buffer"), Translate("PCR-grade water"), 378);
    t_fltVolumeHybridizationWash2 = NGSSTARLOADING::Define_VolumePerWell(Translate("Hybridization Wash Buffer 2"), 200);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Hybridization Wash Buffer 2"), Translate("Hybridization Wash 2 (10x)"), 20);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Hybridization Wash Buffer 2"), Translate("PCR-grade water"), 180);
    t_fltVolumeHybridizationWash3 = NGSSTARLOADING::Define_VolumePerWell(Translate("Hybridization Wash Buffer 3"), 200);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Hybridization Wash Buffer 3"), Translate("Hybridization Wash 3 (10x)"), 20);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Hybridization Wash Buffer 3"), Translate("PCR-grade water"), 180);
    t_fltVolumeNucleaseFreeWater_P8 = NGSSTARLOADING::Define_VolumePerWell(Translate("Nuclease-free water"), 22);
    t_fltVolumeEluate_P8 = 30;
    t_intRequiredNumberOf1000uLTipsP8 = 48;
    t_intRequiredNumberOf50uLTipsP8 = 2 * t_intNumberOfSamplesFromFile;
    l_intNumberOf50ExtraTips = 0;
    t_intRequiredNumberOf50uLTipsP8 = t_intRequiredNumberOf50uLTipsP8 + l_intNumberOf50ExtraTips;
    t_intRequiredNumberOf300uLTipsP8 = 11 * t_intNumberOfSamplesFromFile;
    l_intNumberOf300ExtraTips = 0;
    t_intRequiredNumberOf300uLTipsP8 = t_intRequiredNumberOf300uLTipsP8 + l_intNumberOf300ExtraTips;
    l_intNumberOf1000uLTips = l_intNumberOf1000uLTips + t_intRequiredNumberOf1000uLTipsP8;
    l_intNumberOf300uLTips = l_intNumberOf300uLTips + t_intRequiredNumberOf300uLTipsP8;
    l_intNumberOf50uLTips = l_intNumberOf50uLTips + t_intRequiredNumberOf50uLTipsP8;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    if (t_blnAllowOptimization == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, Translate("MIDI plate (Columns 9 - 12 should be unused)"), 1, ML_STAR.MIDI_Pipette, 0);
    }
    l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
  }
  MECC::TraceComment(Translate("-------------------------------------------------------------------------------------------------------------------------------------------------------------------------\nSection 5: Amplify enriched FFPE DNA sample & Cleanup\n-------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_intNumberOfMIDIPlates = 1;
    l_intNumberOfHSPPlates = 1;
    l_intNumberOfHamiltonComfortLids = 1;
    t_fltVolumePCRReactionMix_P9 = NGSSTARLOADING::Define_VolumePerWell(Translate("PCR Master Mix"), 30);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("PCR Master Mix"), Translate("PCR Reaction Mix (2x)"), 25);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("PCR Master Mix"), Translate("PCR Primer Mix"), 5);
    t_fltVolumeMixingPCRMasterMix = 40;
    t_intRequiredNumberOf50uLTipsP9 = 1 * t_intNumberOfSamplesFromFile;
    l_intNumberOf50ExtraTips = 0;
    t_intRequiredNumberOf50uLTipsP9 = t_intRequiredNumberOf50uLTipsP9 + l_intNumberOf50ExtraTips;
    t_intRequiredNumberOf300uLTipsP9 = 0 * t_intNumberOfSamplesFromFile;
    l_intNumberOf300ExtraTips = 0;
    t_intRequiredNumberOf300uLTipsP9 = t_intRequiredNumberOf300uLTipsP9 + l_intNumberOf300ExtraTips;
    t_intRequiredNumberOf1000uLTipsP9 = 0;
    l_intNumberOf1000uLTips = l_intNumberOf1000uLTips + t_intRequiredNumberOf1000uLTipsP9;
    l_intNumberOf300uLTips = l_intNumberOf300uLTips + t_intRequiredNumberOf300uLTipsP9;
    l_intNumberOf50uLTips = l_intNumberOf50uLTips + t_intRequiredNumberOf50uLTipsP9;
    t_fltVolumeCleanupBeads_P10 = NGSSTARLOADING::Define_VolumePerWell(Translate("Cleanup Beads"), 50);
    t_fltVolume1stSupernatant_P10 = 100;
    t_fltVolumeEthanol_P10 = NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 400);
    t_fltVolumeNucleaseFreeWater_P10 = NGSSTARLOADING::Define_VolumePerWell(Translate("Nuclease-free water"), 50.0);
    t_fltVolumeEluate_P5 = 50;
    t_intRequiredNumberOf50uLTipsP10 = 3 * t_intNumberOfSamplesFromFile;
    l_intNumberOf50ExtraTips = 0;
    t_intRequiredNumberOf50uLTipsP10 = t_intRequiredNumberOf50uLTipsP10 + l_intNumberOf50ExtraTips;
    t_intRequiredNumberOf300uLTipsP10 = 4 * t_intNumberOfSamplesFromFile;
    l_intNumberOf300ExtraTips = l_intNumberOfCleanUpBeadTubes;
    t_intRequiredNumberOf300uLTipsP10 = t_intRequiredNumberOf300uLTipsP10 + l_intNumberOf300ExtraTips;
    t_intRequiredNumberOf1000uLTipsP10 = 16;
    l_intNumberOf1000uLTips = l_intNumberOf1000uLTips + t_intRequiredNumberOf1000uLTipsP10;
    l_intNumberOf300uLTips = l_intNumberOf300uLTips + t_intRequiredNumberOf300uLTipsP10;
    l_intNumberOf50uLTips = l_intNumberOf50uLTips + t_intRequiredNumberOf50uLTipsP10;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack_MIDI, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    if (l_blnInputplateAlreadyLoaded == ASWGLOBAL::BOOL::FALSE)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("HSP containing eluted captured DNA (20 uL)"), 1, ML_STAR.HSP_Pipette2, 0);
      l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
    }
  }
  NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
  NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
  NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
  if (t_blnStoreHSPoverNightWithinODTC == ASWGLOBAL::BOOL::TRUE)
  {
    if (l_blnHamiltonComfortLidAlreadyLoaded == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfHamiltonComfortLids = 0;
    }
    else
    {
      l_intNumberOfHamiltonComfortLids = 1;
    }
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::TRUE;
  }
  MECC::TraceComment(Translate("************ Polishing Master Mix ***********"));
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("DNA Polishing Master Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 10, 5, ML_STAR.CAR_VIALS_SMALL, 1, 0, t_seqAspirate_PolishingMasterMix_distinct, t_seqAspirate_PolishingMasterMix, l_arr_fltReagentVolumesOnTubeAdapterPolishingMasterMix);
  MECC::TraceComment(Translate("************ Fragmenation Master Mix ***********"));
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("DNA Fragmentation Master Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 20, 5, ML_STAR.CAR_VIALS_SMALL, 2, 0, t_seqAspirate_FragmentationMasterMix_distinct, t_seqAspirate_FragmentationMasterMix, l_arr_fltReagentVolumesOnTubeAdapterFragmentationMasterMix);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("DNA Preparation Master Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 15, 7.5, ML_STAR.CAR_VIALS_SMALL, 3, 0, t_seqAspirate_DNAPrepMasterMix_distinct, t_seqAspirate_DNAPrepMasterMix, l_arr_fltReagentVolumesOnTubeDNAPrepMasterMix);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Ligation Master Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 50, 10, ML_STAR.CAR_VIALS_SMALL, 4, 0, t_seqAspirate_LigationMasterMix_distinct, t_seqAspirate_LigationMasterMix, l_arr_fltReagentVolumesInReagentCarrierLigationMasterMix);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Universal Adapter"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::ScrewCap_Tube_1500uL, 1500, 15, 7.5, ML_STAR.CAR_VIALS_SMALL, 5, 0, t_seqAspirate_UniversalAdapter_distinct, t_seqAspirate_UniversalAdapter, l_arr_fltReagentVolumesInReagentCarrierUniversalAdapter);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("PCR Reaction Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 50, 10, ML_STAR.CAR_VIALS_SMALL, 6, 0, t_seqAspirate_PCRReactionMix_distinct, t_seqAspirate_PCRReactionMix, l_arr_fltReagentVolumesInReagentCarrierPCRReactionMix);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Hybridization Supplement"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::ScrewCap_Tube_1500uL, 1500, 50, 10, ML_STAR.CAR_VIALS_SMALL, 7, 0, t_seqAspirate_HybridizationSupplement_distinct, t_seqAspirate_HybridizationSupplement, l_arr_fltReagentVolumesInReagentCarrierHybridizationSupplement);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Hybridization Master Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 40, 10, ML_STAR.CAR_VIALS_SMALL, 9, 0, t_seqAspirate_HybridizationMasterMix_distinct, t_seqAspirate_HybridizationMasterMix, l_arr_fltReagentVolumesInReagentCarrierHybridizationMasterMix);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Universal Enhancing Oligos"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::ScrewCap_Tube_1500uL, 1500, 10, 5, ML_STAR.CAR_VIALS_SMALL, 10, 0, t_seqAspirate_UniversalEnhancingOligos_distinct, t_seqAspirate_UniversalEnhancingOligos, l_arr_fltReagentVolumesInReagentCarrierUniversalEnhancingOligos);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Avenio Tumor Tissue CGP Panel"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::ScrewCap_Tube_500uL, 1500, 8, 5, ML_STAR.CAR_VIALS_SMALL, 11, 0, t_seqAspirate_AvenioPanel_distinct, t_seqAspirate_AvenioPanel, l_arr_fltReagentVolumesInReagentCarrierAvenioPanel);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Bead Wash Buffer (1x)"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Tube5mL, 5000, 100, 10, ML_STAR.CAR_VIALS_LARGE, 1, l_intNumberOfBeadWashBufferTubes, t_seqAspirate_BeadWashBuffer_distinct, t_seqAspirate_BeadWashBuffer, l_arr_fltReagentVolumesOn50mlContainerBeadWashBuffer);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Capture Beads"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 1250, 50, 10, ML_STAR.CAR_VIALS_SMALL, 17, 1, t_seqAspirate_CaptureBeads_distinct, t_seqAspirate_CaptureBeads, l_arr_fltReagentVolumesInReagentCarrierCaptureBeads);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Hybridization Wash Buffer 1"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Tube5mL, 5000, 100, 10, ML_STAR.CAR_VIALS_LARGE, 0, 0, t_seqAspirate_HybWashBuffer1_distinct, t_seqAspirate_HybWashBuffer1, l_arr_fltReagentVolumesOn50mlContainersHybWashBuffer1);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Stringent Wash Buffer"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Tube5mL, 5000, 100, 5, ML_STAR.CAR_VIALS_LARGE, 0, l_intNumberOfStringentWashBufferTubes, t_seqAspirate_StringentWashBuffer_distinct, t_seqAspirate_StringentWashBuffer, l_arr_fltReagentVolumesOn50mlContainersStringentWashBuffer);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Hybridization Wash Buffer 2"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Tube5mL, 5000, 100, 5, ML_STAR.CAR_VIALS_LARGE, 0, 0, t_seqAspirate_HybWashBuffer2_distinct, t_seqAspirate_HybWashBuffer2, l_arr_fltReagentVolumesOn50mlContainersHybWashBuffer2);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Hybridization Wash Buffer 3"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Tube5mL, 5000, 100, 5, ML_STAR.CAR_VIALS_LARGE, 0, 0, t_seqAspirate_HybWashBuffer3_distinct, t_seqAspirate_HybWashBuffer3, l_arr_fltReagentVolumesOn50mlContainersHybWashBuffer3);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("PCR Master Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 25, 5, ML_STAR.CAR_VIALS_SMALL, 12, 0, t_seqAspirate_PCRMasterMix_distinct, t_seqAspirate_PCRMasterMix, l_arr_fltReagentVolumesInReagentCarrierPCRMasterMix);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Ethanol 80%"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 50000, 5000, 10, ML_STAR.RGT50, 1, 0, t_seqAspirate_Ethanol80_distinct, t_seqAspirate_Ethanol80, l_arr_fltReagentVolumesOn50mlContainerEthanol80);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate_FixedTubeNumber(ML_STAR, Translate("Cleanup Beads"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 1300, 100, 10, ML_STAR.CAR_VIALS_SMALL, 13, l_intNumberOfCleanUpBeadTubes, t_seqAspirate_CleanUpBeads_distinct, t_seqAspirate_CleanUpBeads, l_arr_fltReagentVolumesOn2mlContainerCleanupBeads);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Nuclease-free water"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 50000, 3000, 15, ML_STAR.RGT50, 2, 0, t_seqAspirate_NucleasefreeWater_distinct, t_seqAspirate_NucleasefreeWater, l_arr_fltReagentVolumesOn50mlContainerNucleaseFreeWater);
  NGSSTARLOADING::Display_Mastermix_Dialog();
  MECC::TraceComment(Translate("************\n************\n************\nContinue Here\n************\n************\n************"));
  MECC::TraceComment(Translate("After all liquids have been defined..the evaluate step calculates the needed resources\n"));
  NGSSTARLOADING::Evaluate_ResourcesByCarrier();
  NGSSTARLOADING::Retrieve_50mlTrough_ReagentsVolumesAndSequences(l_arr_strReagentNamesOn50mlContainers, l_arr_fltReagentVolumesOn50mlContainers, l_arr_seqReagentsOn50mlContainers);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 1, ML_STAR.MIDI_OnMagnet, t_intNumberOfSamplesFromFile, t_seqMIDI_onMagnet_1_24);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 25, ML_STAR.MIDI_OnMagnet, t_intNumberOfSamplesFromFile, t_seqMIDI_onMagnet_25_48);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 49, ML_STAR.MIDI_OnMagnet, t_intNumberOfSamplesFromFile, t_seqMIDI_onMagnet_49_72);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 73, ML_STAR.MIDI_OnMagnet, t_intNumberOfSamplesFromFile, t_seqMIDI_onMagnet_73_96);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 1, ML_STAR.HHS3_MIDI, t_intNumberOfSamplesFromFile, t_seqMIDI_HHS3_1_24);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 25, ML_STAR.HHS3_MIDI, t_intNumberOfSamplesFromFile, t_seqMIDI_HHS3_25_48);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 49, ML_STAR.HHS3_MIDI, t_intNumberOfSamplesFromFile, t_seqMIDI_HHS3_49_72);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 73, ML_STAR.HHS3_MIDI, t_intNumberOfSamplesFromFile, t_seqMIDI_HHS3_73_96);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 73, ML_STAR.HHS5_MIDI, t_intNumberOfSamplesFromFile, t_seqMIDI_HHS5_73_96);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 1, ML_STAR.MIDI_Pipette, t_intNumberOfSamplesFromFile, t_seqMIDI_Pipette_1_24);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 25, ML_STAR.MIDI_Pipette, t_intNumberOfSamplesFromFile, t_seqMIDI_Pipette_25_48);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 49, ML_STAR.MIDI_Pipette, t_intNumberOfSamplesFromFile, t_seqMIDI_Pipette_49_72);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 73, ML_STAR.MIDI_Pipette, t_intNumberOfSamplesFromFile, t_seqMIDI_Pipette_73_96);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 1, ML_STAR.HSP_Pipette2, t_intNumberOfSamplesFromFile, t_seqHSP_Pipette2_1_24);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 25, ML_STAR.HSP_Pipette2, t_intNumberOfSamplesFromFile, t_seqHSP_Pipette2_25_48);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 49, ML_STAR.HSP_Pipette2, t_intNumberOfSamplesFromFile, t_seqHSP_Pipette2_49_72);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 73, ML_STAR.HSP_Pipette2, t_intNumberOfSamplesFromFile, t_seqHSP_Pipette2_73_96);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 1, ML_STAR.HHS2_HSP, t_intNumberOfSamplesFromFile, t_seqHSS2_HSP_1_24);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 25, ML_STAR.HHS2_HSP, t_intNumberOfSamplesFromFile, t_seqHSS2_HSP_25_48);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 49, ML_STAR.HHS2_HSP, t_intNumberOfSamplesFromFile, t_seqHSS2_HSP_49_72);
  NGSSTARLOADING::Calculate_ReformatSequenceToMatchNumberOfSamples(ML_STAR, 73, ML_STAR.HHS2_HSP, t_intNumberOfSamplesFromFile, t_seqHSS2_HSP_73_96);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrIndex1PositionIDs, t_seqAspirate_IndexPrimerMix, 1);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqAspirate_IndexPrimerMix);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS2_HSP, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_HHS2, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_onCPAC, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_OnCPAC, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_onCPAC, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_OnCPAC, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrIndex2PositionIDs, t_seq_IndexPlate_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrIndex2PositionIDs, t_trp_IndexPlate_Pipette, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_ODTC, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_ODTC, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Pipette, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_Pipette2, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Pipette2, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_OnMagnet, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_OnMagnet, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Waste, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.Ham_ComfortLid_ODTC, t_arrAdapterLigationPlatePositionIDs, t_trpHamiltonComfortLidODTC, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.Ham_ComfortLid_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpHamiltonComfortLidWaste, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arrAdapterLigationPlatePositionIDs, t_seqMIDI_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_Pipette, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_seqMIDI_OnMagnet, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_OnMagnet, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_Waste, 2);
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_seqHHS3_MIDI, 1);
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_trpHHS3_MIDI, 2);
  }
  else
  {
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_seqHHS3_MIDI, 1);
    NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_trpHHS3_MIDI, 2);
  }
  MECC::TraceComment(Translate("Setting sequences completed"));
  SeqRemoveAll(t_trp_Stack1);
  SeqRemoveAll(t_trp_Stack4);
  SeqRemoveAll(t_trpHamiltonComfortLidStackParkPos);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfMIDI, ML_STAR.Stack_MIDI, t_trp_Stack1, t_intMaxPlatesPerStackMIDI, ML_STAR);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfHSP, ML_STAR.Stack4, t_trp_Stack4, t_intMaxPlatesPerStackHSP, ML_STAR);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfComfortLid, ML_STAR.Ham_ComfortLid_Stack_ParkPos, t_trpHamiltonComfortLidStackParkPos, t_intMaxComfortLidPerStack, ML_STAR);
  Trace ("BEFORE  ********* g_int_TotalNumberOfComfortLid:   ", g_int_TotalNumberOfComfortLid);
  Trace ("********* t_intMaxComfortLidPerStack:   ", t_intMaxComfortLidPerStack);
  Trace ("********* l_intNumberOfHamiltonComfortLids:   ", l_intNumberOfHamiltonComfortLids);
  Trace ("********* g_int_TotalNumberOfHSP:   ", g_int_TotalNumberOfHSP);
  Trace ("********* t_intMaxPlatesPerStackHSP:   ", t_intMaxPlatesPerStackHSP);
  Trace ("********* l_intNumberOfHSPPlates:   ", l_intNumberOfHSPPlates);
  Trace ("********* g_int_TotalNumberOfMIDI:   ", g_int_TotalNumberOfMIDI);
  Trace ("********* t_intMaxPlatesPerStackMIDI:   ", t_intMaxPlatesPerStackMIDI);
  Trace ("********* l_intNumberOfMIDIPlates:   ", l_intNumberOfMIDIPlates);
  MECC::TraceComment(Translate("Stack reduced completed"));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::ODTC, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("ODTCHamiltonComforlidPosition.jpg"), Translate("HamiltonComfortLid.png"));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::PLT_Stack, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("PlateStackerCarrier.jpg"), Translate("PlateStackerCarrier_SubImage.jpg"));
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::Display_Message_Dialog(Translate("Please make sure to include ALL the tips which are loaded onto the system in the Tip Counter dialogue which will be displayed after clicking OK below."));
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::TIP50_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("Tip50ulFilterCarriers.jpg"), Translate("TIP_50.png"));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::TIP300_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("Tip300ulFilterCarriers.jpg"), Translate("TIP_300.png"));
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    l_bln_CarrierLoadable = ASWGLOBAL::BOOL::FALSE;
  }
  else
  {
    l_bln_CarrierLoadable = ASWGLOBAL::BOOL::TRUE;
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::RGT1, t_blnSkipLoadingRoutine, l_bln_CarrierLoadable, ASWGLOBAL::BOOL::FALSE, Translate("ReagentContainerCarrier1.jpg"), Translate(""));
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::RGT2, t_blnSkipLoadingRoutine, l_bln_CarrierLoadable, ASWGLOBAL::BOOL::FALSE, Translate("ReagentContainerCarrier2.jpg"), Translate(""));
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Tube_Carrier24, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("CarrierVial24.jpg"), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Vial_Carrier32_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("CarrierVial32_1.jpg"), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Vial_Carrier32_02, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("CarrierVial32_2.jpg"), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::PLT_TIP1000, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("PlateTipCarrier.jpg"), Translate("TIP_1000.png"));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::HHSx2_PLT, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("HHS_HSP_PipettePosition.jpg"), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::CPAC, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("CPACCarrier.jpg"), Translate("CPAC_Adapter.png"));
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  else
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  NGSSTARLOADING::Display_Message_Dialog(Translate("Deck loading completed. Press OK to start the run."));
}

private function _SelectProcesses(  ) void {
  private variable l_intIndexSettingsDoubleOrSingleIndexing;
  private variable l_strIndexLabwareFormat;
  private variable l_strFileInputWorklist;
  private variable l_arr_strProcessID[];
  private variable l_intLengthEmailAddress;
  private variable l_int_OptionSelected;
  private variable l_intDialogID;
  private variable l_arr_strMandatoryStopProcess[];
  private variable l_arr_strDeactivatedStartProcessID[];
  private variable l_arr_strProcessIDCombinations[];
  private variable l_arrCustomToolTip[];
  private variable l_arrDurationOnDeckLigation[];
  private variable l_arrType[];
  private variable l_arrDescription[];
  private variable l_arrDataTypes[];
  private variable l_arrValue[];
  private variable l_arrDataRange[];
  private variable l_intFreshMIDI;
  private variable l_blnDisplayODTCDialog;
  private variable l_blnDisplayOvernightLigationDialog;
  private variable l_blnDisplayOverNightStorageDialog;
  private variable l_blnDisplayOptimizeMIDIUse;
  private variable l_blnDisplayOptimizeHSPUse;
  private variable l_blnOptimization;
  l_arr_strProcessID.SetSize(0);
  if (t_blnAllowOnDeckLigation == ASWGLOBAL::BOOL::TRUE)
  {
    l_arr_strProcessID.AddAsLast(Translate("Section 1: DNA Polishing, Fragmentation and Adapter Ligation"));
  }
  else
  {
    l_arr_strProcessID.AddAsLast(Translate("Section 1: DNA Polishing, Fragmentation and preparation of Adapter Ligation"));
  }
  l_arr_strProcessID.AddAsLast("Section 2: Ligation CleanUp, PCR amplificatiion and PCR CleanUp");
  l_arr_strProcessID.AddAsLast(Translate("Section 3: Prepare Hybridization"));
  l_arr_strProcessID.AddAsLast(Translate("Section 4: Prepare Capture Beads & Perform Hybridization Cleanup"));
  l_arr_strProcessID.AddAsLast(Translate("Section 5: Amplify enriched FFPE DNA sample & Cleanup"));
  l_arr_strProcessIDCombinations.SetSize(0);
  l_arr_strProcessIDCombinations.AddAsLast(Translate("1"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("2"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("3"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("4.5"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("5"));
  l_arr_strDeactivatedStartProcessID.SetSize(0);
  if(0){
    l_arr_strDeactivatedStartProcessID.AddAsLast(2);
  }
  l_arr_strMandatoryStopProcess.SetSize(0);
  if(0){
    l_arr_strMandatoryStopProcess.AddAsLast(2);
  }
  MECC::TraceComment(Translate("PROCESS DEFINITIONS - INPUT"));
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strProcessID:"), l_arr_strProcessID);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strProcessIDCombinations:"), l_arr_strProcessIDCombinations);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strDeactivatedStartProcessID:"), l_arr_strDeactivatedStartProcessID);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strMandatoryStopProcess:"), l_arr_strMandatoryStopProcess);
  NGSSTARLOADING::Display_SelectProcesses_Dialog(1, l_arr_strProcessID, l_arr_strProcessIDCombinations, l_arr_strDeactivatedStartProcessID, l_arr_strMandatoryStopProcess, t_intSelectedIndexSTART, t_intSelectedIndexSTOP, t_arrBlnProcessActivation);
  NGSSTARLOADING::Display_InputWorklist_Dialog(l_strFileInputWorklist);
  Trace ("Selected input worklist :", l_strFileInputWorklist);
  t_arrSamplePositionIDs.SetSize(0);
  t_arrIndex1PositionIDs.SetSize(0);
  t_arrIndex1IDs.SetSize(0);
  t_arrIndex2PositionIDs.SetSize(0);
  t_arrIndex2IDs.SetSize(0);
  NGSSTARLOADING::Read_InputWorklist_ExcelOrCSVFormat(l_strFileInputWorklist, ML_STAR.HSP_Pipette2, t_intNumberOfSamplesFromFile, l_intIndexSettingsDoubleOrSingleIndexing, t_arrIndex1PositionIDs, t_arrIndex1IDs, t_arrIndex2PositionIDs, t_arrIndex2IDs, t_arrAdapterLigatioPlateLabwareID, t_arrAdapterLigationPlatePositionIDs, l_strIndexLabwareFormat);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("********* t_arrIndex1PositionIDs:   "), t_arrIndex1PositionIDs);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("********* t_arrAdapterLigationPlatePositionIDs:   "), t_arrAdapterLigationPlatePositionIDs);
  if (t_intNumberOfSamplesFromFile > 24)
  {
    VectorCustomDialogs::ErrorDialog(Translate("Input Worklist Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("The Input worklist contains more than the maximum number of samples allowed (24). \n Please correct the Input worklist and restart the method."), Translate("The current run will abort."));
    abort;
  }
  l_blnDisplayODTCDialog = ASWGLOBAL::BOOL::FALSE;
  l_blnDisplayOverNightStorageDialog = ASWGLOBAL::BOOL::FALSE;
  l_blnDisplayOvernightLigationDialog = ASWGLOBAL::BOOL::FALSE;
  t_blnODTCused = ASWGLOBAL::BOOL::FALSE;
  t_blnOvernightLigation = ASWGLOBAL::BOOL::FALSE;
  t_blnStoreHSPoverNightWithinODTC = ASWGLOBAL::BOOL::FALSE;
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_blnDisplayODTCDialog = ASWGLOBAL::BOOL::TRUE;
    if (t_blnAllowOnDeckLigation == ASWGLOBAL::BOOL::TRUE)
    {
      l_blnDisplayOvernightLigationDialog = ASWGLOBAL::BOOL::TRUE;
    }
  }
  if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_blnDisplayODTCDialog = ASWGLOBAL::BOOL::TRUE;
    l_blnDisplayOverNightStorageDialog = ASWGLOBAL::BOOL::TRUE;
  }
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
  {
  }
  if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_blnDisplayODTCDialog = ASWGLOBAL::BOOL::TRUE;
    l_blnDisplayOverNightStorageDialog = ASWGLOBAL::BOOL::TRUE;
  }
  if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_blnDisplayODTCDialog = ASWGLOBAL::BOOL::TRUE;
    l_blnDisplayOverNightStorageDialog = ASWGLOBAL::BOOL::TRUE;
  }
  l_intDialogID = 1;
  if (l_blnDisplayODTCDialog == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Is the ODTC Module used in this run?"), Translate("YES"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Is the ODTC Module used in this run?"), Translate("NO"));
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(l_intDialogID);
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Is the ODTC Module used in this run?"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      t_blnODTCused = ASWGLOBAL::BOOL::TRUE;
    }
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    l_intDialogID = 2;
    if (l_blnDisplayOvernightLigationDialog == ASWGLOBAL::BOOL::TRUE)
    {
      if (t_blnAllowOnDeckLigation == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Do you want to perform overnight Ligation on-deck?"), Translate("YES"));
        NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Do you want to perform overnight Ligation on-deck?"), Translate("NO"));
      }
    }
    if(0){
      if (t_intSelectedIndexSTOP == 2)
      {
        l_blnDisplayOverNightStorageDialog = ASWGLOBAL::BOOL::FALSE;
      }
    }
    if (l_blnDisplayOverNightStorageDialog == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Store HSP over night at the end of the selected steps?"), Translate("Store HSP over night at room temperature"));
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Store HSP over night at the end of the selected steps?"), Translate("Store HSP over night at 12 C"));
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Store HSP over night at the end of the selected steps?"), Translate("Do not store HSP over night."));
    }
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(l_intDialogID);
    if (l_blnDisplayOvernightLigationDialog == ASWGLOBAL::BOOL::TRUE)
    {
      if (t_blnAllowOnDeckLigation == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Do you want to perform overnight Ligation on-deck?"), t_intSelectionOvernightLigation);
        if (t_intSelectionOvernightLigation == 1)
        {
          t_blnOvernightLigation = ASWGLOBAL::BOOL::TRUE;
        }
      }
    }
    if (l_blnDisplayOverNightStorageDialog == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Store HSP over night at the end of the selected steps?"), l_int_OptionSelected);
      if (l_int_OptionSelected == 3)
      {
        t_blnStoreHSPoverNightWithinODTC = ASWGLOBAL::BOOL::FALSE;
      }
      else
      {
        t_blnStoreHSPoverNightWithinODTC = ASWGLOBAL::BOOL::TRUE;
        if (l_int_OptionSelected == 1)
        {
          t_blnStoreAtRoomTemperature = ASWGLOBAL::BOOL::TRUE;
        }
        if (l_int_OptionSelected == 2)
        {
          t_blnStoreAtRoomTemperature = ASWGLOBAL::BOOL::FALSE;
        }
      }
    }
    else
    {
      t_blnStoreHSPoverNightWithinODTC = ASWGLOBAL::BOOL::FALSE;
    }
  }
  if (t_blnOvernightLigation == ASWGLOBAL::BOOL::TRUE)
  {
    l_arrType.SetSize(0);
    l_arrValue.SetSize(0);
    l_arrDescription.SetSize(0);
    l_arrDataTypes.SetSize(0);
    l_arrDataRange.SetSize(0);
    l_arrCustomToolTip.SetSize(0);
    l_arrDurationOnDeckLigation.SetSize(0);
    l_arrType.AddAsLast(Translate("Ligation Time"));
    l_arrValue.AddAsLast(Translate("16"));
    l_arrDescription.AddAsLast(Translate("hours (min. 15 h; max. 19 h)"));
    l_arrDataRange.AddAsLast(Translate("15|19"));
    l_arrDataTypes.AddAsLast(1);
    l_arrCustomToolTip.AddAsLast(Translate(""));
    APPSLIB::TraceArray4(Translate("********* Arrays for Input Dialog *********"), l_arrType, l_arrValue, l_arrDescription, l_arrDataTypes);
    APPSLIB::TraceArray2(Translate("********* Arrays for Input Dialog 2 *********"), l_arrDataRange, l_arrCustomToolTip);
    VectorCustomDialogs::InputDialog(Translate("Specify Ligation Duration"), 1, 0, 0, Translate("Please specify the duration of the on-deck ligation. \nThis will create a stoppable timer and user can stop the Ligaton Process on his own behalf."), Translate("Recommendations acc. to Roche_AVENIO_CGP manual: 16 - 18h)"), l_arrType, l_arrValue, l_arrDescription, l_arrDataTypes, l_arrDataRange, l_arrCustomToolTip, l_arrDurationOnDeckLigation);
    APPSLIB::TraceArray(Translate("********* l_arrDurationOnDeckLigation *********"), l_arrDurationOnDeckLigation);
    t_strHoursOvernightLigation=l_arrDurationOnDeckLigation.GetAt(1-1);
  }
  l_intLengthEmailAddress = StrGetLength(t_strEmailAdress);
  if (l_intLengthEmailAddress > 0)
  {
    t_blnSendEmails = ASWGLOBAL::BOOL::TRUE;
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_DownloadProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("Roche_AVENIO_CGP_Init"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
  }
}

private function Process02_PrepareAndInitiateAdapterLigation(  ) void {
  private variable l_blnPCRcompleted;
  private variable l_strReadCurrentBarcode;
  private variable l_intReturnValue_ExternalThermalCycling;
  private variable l_arrListExternalThermalCyclingMessage[];
  private variable loopCounter1;
  private variable t_intMaxDurationOnDeckLigation;
  private variable l_strElapsedTimeforOnDeckLigation;
  private variable l_strTypeElapsedTimer;
  private variable l_fltElapsedTimeHours;
  private variable l_fltElapsedTimeMin;
  private variable l_fltElapsedTimeHoursRest;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process2_Prepare and Initiate Adapter Ligation ********************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  if (t_intSelectionOvernightLigation == 1)
  {
    VectorCustomDialogs::ShowStatusDialog(Translate("Process 2: Prepare and Perform  Adapter Ligation"));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 2: Prepare and Perform  Adapter Ligation"), ASWGLOBAL::BOOL::YES);
  }
  else
  {
    VectorCustomDialogs::ShowStatusDialog(Translate("Process 2: Prepare and Initiate Adapter Ligation"));
    NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 2: Prepare and Initiate Adapter Ligation"), ASWGLOBAL::BOOL::YES);
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 2: Prepare and Initiate Adapter Ligation"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsP2, t_intRequiredNumberOf300uLTipsP2, t_intRequiredNumberOf1000uLTipsP2, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  VectorCustomDialogs::AppendStatusText(Translate("> add DNA Preparation Master Mix to samples. "));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_DNAPrepMasterMix, t_seqHSP_Pipette2, t_fltVolumeDNAPrepMix, Translate("Roche_AVENIO_CGP_50F_DNAPrepMasterMix_SurfaceEmpty"), 5, 0, 50, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("> Transport sample plate with DNA preparation reaction to ODTC and incubate. "));
    if (t_intSelectedIndexSTART == 2)
    {
      NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    }
    VectorCustomDialogs::AppendStatusText(Translate("> Adjust ODTC Lid-Temperature to 75C. "));
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("Roche_AVENIO_CGP_Block25Lid75"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("Roche_AVENIO_CGP_LigationPreparation"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    VectorCustomDialogs::AppendStatusText(Translate("> Wait for incubation to finish. "));
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    VectorCustomDialogs::AppendStatusText(Translate("> DNA preparation finished. "));
    VectorCustomDialogs::AppendStatusText(Translate("> Recover sample plate from ODTC. "));
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, Translate(""), Translate("Roche_AVENIO_CGP_Block16Lid30"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, 1);
  }
  else
  {
    VectorCustomDialogs::AppendStatusText(Translate("> DNA preparation reaction is incubated off-deck. "));
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Incubate the sample in a preheated thermocycler with the heated lid set at = 80C as stated for the First Strand Synthesis"));
    }
    l_blnPCRcompleted = 0;
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("DNA Preparation is performed off-deck."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please remove the DNA Preparation plate from the - FORTH - position of the unloaded carrier:"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Perform the DNA Preparation Reaction in an external thermocycler with the following settings: \n65C ---------- 30 min \n 4C ---------- hold"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("AFTER the DNA Preparation: \nPlease place the processed plate at the - FOURTH - position of the unloaded carrier. "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_1 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_1 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  MECC::TraceComment(Translate("********** Add Universal Adapter **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> add Universal Adapter to sample. "));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_UniversalAdapter, t_seqHSP_Pipette2, t_fltVolumeUniversalAdapter, Translate("Roche_AVENIO_CGP_50F_UniversalAdapter_SurfaceEmpty"), 3, 0, 45, 0, 1.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  MECC::TraceComment(Translate("********** Add Ligation Master Mix **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> add Ligation Master Mix to sample. "));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_LigationMasterMix, t_seqHSP_Pipette2, t_fltVolumeAdapterLigationMix, "Roche_AVENIO_CGP_300F_LigationMasterMix_SurfaceEmpty", 5, 0, 105, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  if (t_blnAllowOnDeckLigation == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_intSelectionOvernightLigation == 1)
    {
      VectorCustomDialogs::AppendStatusText(Translate("> Ligation performed on-deck. "));
      if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
      {
        VectorCustomDialogs::AppendStatusText(Translate("> Wait for ODTC to reach correct temperature. "));
        NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
        VectorCustomDialogs::AppendStatusText(Translate("> Transport sample plate with ligation reaction to ODTC and incubate over night. "));
        NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
        NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
        NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
        NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, Translate(""), Translate("Roche_AVENIO_CGP_OnDeckLigation"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, 1);
        t_intMaxDurationOnDeckLigation = t_strHoursOvernightLigation * 3600;
        if( 0 == Duration_on_deck_ligation.SetTimer(t_intMaxDurationOnDeckLigation) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_arrListExternalThermalCyclingMessage.SetSize(0);
        l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please recover the reagent vials from the unloaded carrier and store them at appropriate conditions until further use."));
        l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(""));
        l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the method."));
        l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("Recover original reagent tubes"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        l_arrListExternalThermalCyclingMessage.SetSize(0);
        l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Adapter Ligation is performed ON-deck."));
        l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
        l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("The Ligation Reaction is currently incubating in the ODTC."));
        l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
        l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will display a timer indicating the elapsed  incubation time. Please do NOT stop the timer immediately."));
        l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
        l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("NOTE: After stopping the timer a restart of the method with Section 2 is neccessary to continue the method."));
        l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
        if( 0 == Duration_on_deck_ligation.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_strElapsedTimeforOnDeckLigation = Duration_on_deck_ligation.GetElapsedTime();
        l_strElapsedTimeforOnDeckLigation = MthCeiling(l_strElapsedTimeforOnDeckLigation);
        l_fltElapsedTimeHours = l_strElapsedTimeforOnDeckLigation / 3600;
        l_fltElapsedTimeHoursRest = l_strElapsedTimeforOnDeckLigation % 3600;
        l_fltElapsedTimeMin = l_fltElapsedTimeHoursRest / 60;
        l_strTypeElapsedTimer = StrGetType(l_strElapsedTimeforOnDeckLigation);
        Trace ("จจจจจจจจจl_fltElapsedTimeHours:   ",l_fltElapsedTimeHours);
        Trace ("จจจจจจจจจl_fltElapsedTimeHoursRest:   ",l_fltElapsedTimeHoursRest);
        Trace ("จจจจจจจจจl_fltElapsedTimeMin:   ",l_fltElapsedTimeMin);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("********** Duration of on-deck ligation (seconds):   "), l_strElapsedTimeforOnDeckLigation);
        NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(l_strElapsedTimeforOnDeckLigation, ASWGLOBAL::BOOL::TRUE);
        NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
        NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
        NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
        NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
        NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
      }
      if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("The Ligation Reaction is prepared and reay for off-deck incubation"));
      }
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      l_arrListExternalThermalCyclingMessage.SetSize(0);
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Adapter Ligation was performed on-deck."));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please recover the completed adapter ligation reactions from the - FOURTH - position and keep it on ice until further use."));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please restart the method at Process 3 to continue the library preparation."));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will finish the method."));
      l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
      if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
      }
    }
    else
    {
      VectorCustomDialogs::AppendStatusText(Translate("> Ligation performed off-deck. "));
      if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("The Ligation Reaction is prepared and reay for off-deck incubation"));
      }
      l_blnPCRcompleted = 0;
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      l_arrListExternalThermalCyclingMessage.SetSize(0);
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Adapter Ligation is performed off-deck."));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please remove the Adapter Ligation reaction plate from the - FOURTH - position, seal it and perform \nthe following incubation in an external cycler:"));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("16C          16 -18 h"));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please restart the method at Process 3 to continue the library preparation."));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will finish the method."));
      l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
      if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
      }
    }
  }
  else
  {
    VectorCustomDialogs::AppendStatusText(Translate("> Ligation performed off-deck. "));
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("The Ligation Reaction is prepared and reay for off-deck incubation"));
    }
    l_blnPCRcompleted = 0;
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Adapter Ligation is performed off-deck."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please remove the Adapter Ligation reaction plate from the - FOURTH - position, seal it and perform \nthe following incubation in an external cycler:"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("16C          16 -18 h"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please restart the method at Process 3 to continue the library preparation."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will finish the method."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 2: End Prep of cDNA Library is completed"), ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: Process02_PrepareAndInitiateAdapterLigation ********************"));
}

private function Process01_DNAPolishingAndFragmentation(  ) void {
  private variable l_blnPCRcompleted;
  private variable l_strReadCurrentBarcode;
  private variable l_intReturnValue_ExternalThermalCycling;
  private variable l_arrListExternalThermalCyclingMessage[];
  private variable loopCounter1;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process 1: DNA Polishing And Fragmentation ***************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process 1: DNA Polishing And Fragmentation"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 1: DNA Polishing And Fragmentation"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsP1, t_intRequiredNumberOf300uLTipsP1, t_intRequiredNumberOf1000uLTipsP1, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  VectorCustomDialogs::AppendStatusText(Translate("> Add Polishing master mix to sample."));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_PolishingMasterMix, t_seqHSP_Pipette2, t_fltVolumePolishingMix, Translate("Roche_AVENIO_CGP_50F_PolishingMix_SurfaceEmpty"), 15, 0, 40, 0, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("> Transport sample plate with polishing reaction to ODTC and incubate. "));
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("Roche_AVENIO_CGP_Polishing"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    VectorCustomDialogs::AppendStatusText(Translate("> Wait for incubation to finish. "));
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    VectorCustomDialogs::AppendStatusText(Translate("> Polishing finished. "));
    VectorCustomDialogs::AppendStatusText(Translate("> Recover sample plate from ODTC. "));
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_seqHSP_Pipette2, t_trpHSP_OnCPAC, 0, 1, l_strReadCurrentBarcode, 4);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
  }
  else
  {
    VectorCustomDialogs::AppendStatusText(Translate("> Polishing reaction is performed off-deck. "));
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Incubate the sample in a preheated thermocycler with the heated lid set at = 80ฐC as stated for the First Strand Synthesis"));
    }
    l_blnPCRcompleted = 0;
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("DNA polishing is performed off-deck."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please remove the DNA polishing reaction plate, seal it and perform \nthe following incubation in an external cycler:"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("37C --------- 30 min \n 4C --------- hold "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("AFTER DNA polishing: \n Please place the processed DNA polishing plate to the unloaded carrier at the - FOURTH - position."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_2 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_2 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  MECC::TraceComment(Translate("*********** add DNA Fragmentation Mix **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Add DNA Fragmention Master Mix to Samples. "));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_FragmentationMasterMix, t_seqHSP_OnCPAC, t_fltVolumeFragmentationMix, Translate("Roche_AVENIO_CGP_50F_FragmentationMasterMix_SurfaceEmpty"), 10, 0, 40, 0, 2, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("> Transport sample plate with fragmentation reaction to ODTC and incubate. "));
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_OnCPAC, t_seqHSP_Pipette2, 0, 1, l_strReadCurrentBarcode, 4);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("Roche_AVENIO_CGP_Fragmentation"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    VectorCustomDialogs::AppendStatusText(Translate("> Wait for incubation to finish. "));
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    VectorCustomDialogs::AppendStatusText(Translate("> Fragmentation finished. "));
    VectorCustomDialogs::AppendStatusText(Translate("> Recover sample plate from ODTC. "));
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidStackParkPos, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 0, l_strReadCurrentBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
  }
  else
  {
    VectorCustomDialogs::AppendStatusText(Translate("> Fragmentation reaction is performed off-deck. "));
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_OnCPAC, t_seqHSP_Pipette2, 0, 1, l_strReadCurrentBarcode, 4);
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Incubate the DNA Fragmentation Reaction in an external cycler set to 37C as stated in the Manual under - Perform Fragmentation -."));
    }
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("DNA Fragmentation is performed off-deck."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please remove the DNA Fragmentation reaction plate, seal it and perform \nthe following incubation in an external cycler:"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("37C --------- 30 min \n 4C --------- hold "));
    if (t_intSelectedIndexSTOP != 1)
    {
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("AFTER DNA Fragmentation: \n Please place the processed DNA Fragmenation plate to the unloaded carrier at the - FOURTH - position."));
    }
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_3 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_3 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  VectorCustomDialogs::AppendStatusText(Translate("> Set CPAC to room temperature. "));
  NGSSTARPREP::CPAC_SetTemperature(22);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 1: DNA Polishing And Fragmentation is completed"), ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: Process 1: DNA Polishing And Fragmentation ********************"));
}

private function Process03_PostLigationCleanUp(  ) void {
  private variable l_strReadCurrentBarcode;
  private variable l_blnPCRcompleted;
  private variable l_intReturnValue_ExternalThermalCycling;
  private variable l_arrListExternalThermalCyclingMessage[];
  MECC::TraceComment(Translate("*************************************************************************************************************************\n*************************  SUBMETHOD START: Process 3: Post-Ligation CleanUp  *************************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process 3: Post-Ligation CleanUp"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 3: Post-Ligation CleanUp"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsP3, t_intRequiredNumberOf300uLTipsP3, t_intRequiredNumberOf1000uLTipsP3, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  VectorCustomDialogs::AppendStatusText(Translate("> Transport MIDI plate from Stack to HHS3 to start Cleanup procedure."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
  SeqIncrement(t_trp_Stack1, 1);
  VectorCustomDialogs::AppendStatusText(Translate("> Transfer ligation reaction to MIDI for Cleanup."));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2, t_seqHHS3_MIDI, t_fltVolumeTransferLigationReaction, Translate("Roche_AVENIO_CGP_300F_LigationReaction_SurfaceEmpty"), 5, 0, 0, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  VectorCustomDialogs::AppendStatusText(Translate("> Start Cleanup of Ligation reaction."));
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seqAspirate_IndexPrimerMix);
  NGSSTARPROCESSES::Customized_Process_CleanUp_ElutionBufferInPlate(ML_STAR, t_seqAspirate_CleanUpBeads, t_seqAspirate_CleanUpBeads, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqAspirate_IndexPrimerMix, ASWGLOBAL::BOOL::TRUE, 200, t_fltVolumeCleanupBeads_P3, t_fltVolumePrimerMix, 220, Translate("Roche_AVENIO_CGP_300F_CleanupBeads_SurfaceEmpty"), Translate("Roche_AVENIO_CGP_1000F_CleanupBeadsMixing_SurfaceEmpty"), Translate("Roche_AVENIO_CGP_1000F_80Ethanol_JetPart"), Translate("Roche_AVENIO_CGP_50F_PrimerMix_SurfaceEmpty"), Translate("Roche_AVENIO_CGP_300F_Supernatant_JetEmpty"), Translate("Roche_AVENIO_CGP_300F_EthanolToWaste_JetEmpty"), 1800, 1200, 300, 20, 3, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::FALSE, 300, 420, 120, 300, 180);
  if (t_blnAllowOptimization == ASWGLOBAL::BOOL::FALSE)
  {
    MECC::TraceComment(Translate("********* No optimization of HSP plate use. *********"));
    MECC::TraceComment(Translate("********* Discard old HSP to waste *********"));
    VectorCustomDialogs::AppendStatusText(Translate("> Discard Ligation HSP to waste."));
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_Waste, 0, 0, l_strReadCurrentBarcode, 4);
    MECC::TraceComment(Translate("********* Bring new HSP to deck *********"));
    VectorCustomDialogs::AppendStatusText(Translate("> Retrieve fresh HSP from stack."));
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode, 4);
    SeqIncrement(t_trp_Stack4, 1);
  }
  else
  {
    MECC::TraceComment(Translate("********* Optimization of HSP use. *********"));
    VectorCustomDialogs::AppendStatusText(Translate("> Transfer purified adapter ligated samples to 2nd sector of HSP."));
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_onMagnet_1_24, t_seqHSP_Pipette2_25_48, t_fltVolumePrimerMix, Translate("Roche_AVENIO_CGP_50F_EluateLigationCleanup_SurfaceEmpty"), 0, 0, 0, 0.2, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  if (t_blnAllowOptimization == ASWGLOBAL::BOOL::FALSE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("> Discard MIDI plate."));
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  }
  else
  {
    VectorCustomDialogs::AppendStatusText(Translate("> Reposition MIDI plate for later use."));
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Pipette, 0, 1, l_strReadCurrentBarcode, 4);
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 3: Adapter Ligation and Size Selection is completed"), ASWGLOBAL::BOOL::YES);
  MECC::TraceComment(Translate("*************************************************************************************************************************\n*************************  SUBMETHOD COMPLETE: Process 3: Post-Ligation CleanUp  *************************\n*************************************************************************************************************************"));
}

private function ProcessX_StoreHSPWithinODTCOverNight( sequence & i_trpHSP, variable i_blnIncubateODTCWithoutActiveCooling ) void {
  private variable l_strReadCurrentBarcode;
  private variable l_strSequenceName;
  private variable l_strODTCMessage;
  private variable l_intODTCStorageCycle;
  private variable l_retValueDialog;
  private variable l_strODTCFolderXML;
  private variable l_arrODTCStorageListInformation[];
  private variable l_blnRetrievePlateFromODTC;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  ProcessX_StoreHSPWithinODTCOverNight********************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process X: Storing the HSP within ODTC over night."));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process X: Storing the HSP within ODTC over night."), ASWGLOBAL::BOOL::YES);
  l_strODTCFolderXML = Translate("C:\Program Files (x86)\HAMILTON\ClinicalNGSStarlet\KitProvider\KitName\Files\ODTC_scripts\StorePlateOverNight.xml");
  l_blnRetrievePlateFromODTC = ASWGLOBAL::BOOL::FALSE;
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    {
      l_intODTCStorageCycle = 0;
      while (1 == 1)
      {
        l_intODTCStorageCycle = l_intODTCStorageCycle + 1;
        if (l_intODTCStorageCycle == 1)
        {
          MECC::TraceComment(Translate("New line inserted before downloading new xml has a preheat step is now performed if storage of plate is active"));
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
          NGSSTARPREP::ODTC_DownloadProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML);
          NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
          NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, i_trpHSP, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
          Util2::Debug::TraceSequence(t_trpHamiltonComfortLidStackParkPos);
          NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
          NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
          if (i_blnIncubateODTCWithoutActiveCooling == ASWGLOBAL::BOOL::TRUE)
          {
            MECC::TraceComment(Translate("NO ODTC protocol will be activated."));
          }
          else
          {
            NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, Translate("Init_20CLid30C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
            NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
            NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, Translate("StorePlate12degrees"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
          }
        }
        l_arrODTCStorageListInformation.SetSize(0);
        l_strODTCMessage = StrConcat2(Translate("ODTC - 2 hours cycle number : "), l_intODTCStorageCycle);
        l_arrODTCStorageListInformation.AddAsLast(l_strODTCMessage);
        l_strSequenceName = SeqGetName(i_trpHSP);
        l_strODTCMessage = StrConcat2(Translate("Retrieving the plate to following sequence : "), l_strSequenceName);
        l_arrODTCStorageListInformation.AddAsLast(l_strODTCMessage);
        l_arrODTCStorageListInformation.AddAsLast(Translate("Press OK to retrieve the HSP from ODTC."));
        l_retValueDialog = VectorCustomDialogs::ListDialog(Translate("ODTC long time storage."), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::Ok, 0, 0, 7200, Translate(""), Translate("This procedure will prolong itself each 2 hours automatically. Press YES to retrieve HSP."), l_arrODTCStorageListInformation);
        Trace("l_retValueDialog : ",l_retValueDialog);
        if (t_blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
        {
          l_retValueDialog = VectorCustomDialogs::MessageDialog(Translate("Simulation mode ODTC cycles"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Press YES to quit endless loop. Press NO to add an additional ODTC storage cycle."));
          if (l_retValueDialog == ASWGLOBAL::DIALOG::YES)
          {
            l_blnRetrievePlateFromODTC = ASWGLOBAL::BOOL::TRUE;
          }
        }
        else
        {
          if (l_retValueDialog == ASWGLOBAL::DIALOG::OK)
          {
            l_blnRetrievePlateFromODTC = ASWGLOBAL::BOOL::TRUE;
          }
        }
        if (l_blnRetrievePlateFromODTC == ASWGLOBAL::BOOL::TRUE)
        {
          NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
          NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
          NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
          SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
          NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, i_trpHSP, 0, 1, l_strReadCurrentBarcode);
          NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
          break;
        }
      }
    }
    if (i_blnIncubateODTCWithoutActiveCooling == ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, Translate("Init12Block20Lid"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
      NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, l_strODTCFolderXML, Translate("Dehumidify block"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
      NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
      NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    }
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process X: Storing the HSP within ODTC over night is completed"), ASWGLOBAL::BOOL::YES);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: ProcessX_StoreHSPWithinODTCOverNight********************"));
}

private function Process04_PerformPreCaptureAmplification(  ) void {
  private variable l_blnPCRcompleted;
  private variable loopCounter1;
  private variable l_strReadCurrentBarcode;
  private variable l_intReturnValue_ExternalThermalCycling;
  private sequence l_seqPipettingTarget;
  private variable l_arrListExternalThermalCyclingMessage[];
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process 4: Perform Pre-Capture Amplification ******************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process 4: Perform Pre-Capture Amplification"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 4: Perform Pre-Capture Amplification"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsP4, t_intRequiredNumberOf300uLTipsP4, t_intRequiredNumberOf1000uLTipsP4, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
  }
  MECC::TraceComment(Translate("********* Assign target sequence depending if the method execution is started at Process 4 or not *********"));
  SeqOperatorAssignSeq(l_seqPipettingTarget, t_seqHSP_Pipette2_25_48);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, l_seqPipettingTarget);
  MECC::TraceComment(Translate("********* Adding PCR reaction mix to the Ligation Product *********"));
  VectorCustomDialogs::AppendStatusText(Translate("> add PCR reaction mix to the purified ligation product"));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_PCRReactionMix, l_seqPipettingTarget, t_fltVolumePCRReactionMix_P4, Translate("Roche_AVENIO_CGP_50F_PCRReactionMix_SurfaceEmpty"), 3, 0, t_fltVolumeMixingP4, 0, 1.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  MECC::TraceComment(Translate("********* use the ODTC *********"));
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("> transport the PCR reaction to ODTC for cycling."));
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    MECC::TraceComment(Translate("********* transport plate to ODTC *********"));
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    MECC::TraceComment(Translate("********* transport Comfort Lid to ODTC *********"));
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, 4);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    MECC::TraceComment(Translate("********* execute ODTC script *********"));
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, Translate(""), Translate("Roche_AVENIO_CGP_PreCapturePCR_8"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::TRUE);
    VectorCustomDialogs::AppendStatusText(Translate("> wait for cycling to finish."));
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    VectorCustomDialogs::AppendStatusText(Translate("> Cycling finished."));
    VectorCustomDialogs::AppendStatusText(Translate("> recover amplification reaction from ODTC."));
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    MECC::TraceComment(Translate("********* Transport Lid back to parking position *********"));
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
    MECC::TraceComment(Translate("********* Transport Amplified samples to HSP_Pipette2 *********"));
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
  }
  else
  {
    VectorCustomDialogs::AppendStatusText(Translate("> PCR Amplification is performed off-deck."));
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Run the PreCapture PCR Amplification on an external thermocycler"));
    }
    l_blnPCRcompleted = 0;
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("PCR Amplification is performed off-deck."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please remove the PCR Amplification reaction plate, seal it and perform \nthe following incubation in an external cycler as specified in the Kits Manual:"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("AFTER PCR Amplification reaction: \n Please place the processed DNA Amplification plate to the unloaded carrier at the - FOURTH - position."));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    }
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_4 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_4 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD STOP: Process 4: Perform Pre-Capture Amplification ******************\n*************************************************************************************************************************"));
}

private function Process05_CleanUpPreCaptureAmplification(  ) void {
  private variable l_strReadCurrentBarcode;
  private sequence l_seqPipettingSource;
  private variable l_blnPCRcompleted;
  private variable loopCounter1;
  private variable l_intReturnValue_ExternalThermalCycling;
  private variable l_arrListExternalThermalCyclingMessage[];
  private sequence l_seqPipettingTarget;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process 4: Perform Pre-Capture Amplification ******************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process 5: Cleanup PrepCapture PCR Amplification"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 5: Cleanup PrepCapture PCR Amplification"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsP5, t_intRequiredNumberOf300uLTipsP5, t_intRequiredNumberOf1000uLTipsP5, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if (t_blnAllowOptimization == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
    SeqIncrement(t_trp_Stack1, 1);
    SeqOperatorAssignSeq(l_seqPipettingSource, t_seqHSP_Pipette2_1_24);
  }
  else
  {
    SeqOperatorAssignSeq(l_seqPipettingSource, t_seqHSP_Pipette2_25_48);
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
  }
  MECC::TraceComment(Translate("********* Transfer of SAmple to MIDI plate for cleanup **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Transfer amplified samples to MIDI plate for Cleanup."));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, l_seqPipettingSource, t_seqMIDI_HHS3_25_48, 50, Translate("Roche_AVENIO_CGP_50F_TransferPreCaptureReaction_SurfaceEmpty"), 0, 0, 0, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("********* Cleanup - 2x Beads Addition **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Start Cleanup with 2x Bead Addition."));
  NGSSTARPROCESSES::Customized_Process_CleanUp_2BeadAdditions(ML_STAR, t_seqAspirate_CleanUpBeads, t_seqAspirate_CleanUpBeads, t_seqMIDI_HHS3_25_48, t_seqAspirate_Ethanol80, t_seqMIDI_onMagnet_25_48, ML_STAR.LiquidWaste, t_seqAspirate_NucleasefreeWater, 200, t_fltVolumeCleanupBeads_P5, t_fltVolumeCleanupBeads_P5, t_fltVolumeNucleaseFreeWater_P5a, t_fltVolumeNucleaseFreeWater_P5b, 100, 100, Translate("Roche_AVENIO_CGP_300F_CleanupBeads_SurfaceEmpty"), Translate("Roche_AVENIO_CGP_1000F_CleanupBeadsMixing_SurfaceEmpty"), Translate("Roche_AVENIO_CGP_1000F_80Ethanol_JetPart"), Translate("Roche_AVENIO_CGP_50F_NucleaseFreeWater_SurfaceEmpty"), Translate("Roche_AVENIO_CGP_300F_Supernatant_JetEmpty"), Translate("Roche_AVENIO_CGP_300F_EthanolToWaste_JetEmpty"), 1500, 1200, 60, 60, 3, t_intHHS3_HSP3_MIDI3, 0, 600, 600, 180, 180, 120, 180);
  MECC::TraceComment(Translate("********* remove old HSP plate to waste **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Discard HSP to waste."));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_Waste, 0, 0, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("********* bring new HSP to deck **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Retrieve new HSP from stack."));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode, 4);
  SeqIncrement(t_trp_Stack4, 1);
  MECC::TraceComment(Translate("********* assign sequence **********"));
  SeqOperatorAssignSeq(l_seqPipettingTarget, t_seqHSP_Pipette2_1_24);
  MECC::TraceComment(Translate("********* Transfer of purified samples to HSP **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Transfer purified eluted samples to fresh HSP."));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_onMagnet_25_48, l_seqPipettingTarget, t_fltVolumeEluate_P5, Translate("Roche_AVENIO_CGP_50F_CleanSamples_SurfaceEmpty"), 0, 0, 0, 0.2, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  MECC::TraceComment(Translate("********* Transport used MIDI plate to MIDI Pipette for possible recovery **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Transfer used MIDI plate to new position for possible recovery."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Pipette, 0, 1, l_strReadCurrentBarcode, 4);
  VectorCustomDialogs::AppendStatusText(Translate("> return HSP with purified amplified samples for QC."));
  if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("The Cleanup of the PCR Amplification reaction is complete. The samples are ready for QC"));
  }
  l_blnPCRcompleted = 0;
  if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  }
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  l_arrListExternalThermalCyclingMessage.SetSize(0);
  l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Quality Control is performed off-deck."));
  l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
  l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please recover the purified amplified libraries from the - FOURTH - position."));
  if (t_blnHSPOptimize == ASWGLOBAL::BOOL::TRUE)
  {
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("The purified amplified libraries are located in Columns 7 - 9 of the plate."));
  }
  else
  {
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("The purified amplified libraries are located in Columns 1 - 3 of the plate."));
  }
  l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
  l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
  l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
  if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
  {
    abort;
  }
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
  {
    {
      loopCounter1 = 0;
      while (1 == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_5 ;
        err.Clear();
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        break;
        errLabel_5 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
          NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
          NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
        }   /* end if from skip handler if no error */
      }
    }
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }
}

private function Process06_SetupHybridization(  ) void {
  private variable l_blnPCRcompleted;
  private variable loopCounter1;
  private variable l_strReadCurrentBarcode;
  private variable l_intReturnValue_ExternalThermalCycling;
  private sequence l_seqPipettingSource;
  private variable l_arrListExternalThermalCyclingMessage[];
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process 6: Prepare And Perform Hybridization ******************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process 6: Prepare and Perform Hybridization"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 6: Prepare and Perform Hybridization"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsP6, t_intRequiredNumberOf300uLTipsP6, t_intRequiredNumberOf1000uLTipsP6, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if (t_blnAddFreshMIDItoStacker == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
  }
  else
  {
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
  }
  if (t_blnShiftSourceSequence == ASWGLOBAL::BOOL::TRUE)
  {
    SeqOperatorAssignSeq(l_seqPipettingSource, t_seqHSP_Pipette2_49_72);
  }
  else
  {
    SeqOperatorAssignSeq(l_seqPipettingSource, t_seqHSP_Pipette2_1_24);
  }
  MECC::TraceComment(Translate("*********** Transfer Hybridization Supplement to MIDI plate **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Transfer Hybridization Supplement to MIDI plate."));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_HybridizationSupplement, t_seqMIDI_HHS3_49_72, t_fltVolumeHybridizationSupplement, Translate("Roche_AVENIO_CGP_300F_HybridizationSupplement_JetEmpty"), 0, 0, 0, 0, 3, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("*********** Transfer Sample to MIDI plate **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Transfer Sample to MIDI plate."));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, l_seqPipettingSource, t_seqMIDI_HHS3_49_72, t_fltVolumeTransferInput_P6, Translate("Roche_AVENIO_CGP_50F_CleanSamples_SurfaceEmpty"), 5, 0, 0, 0.5, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("*********** Discard Input Plate to waste **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Discard Input plate to waste."));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_Waste, 0, 0, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("*********** Concentration of Sample and Addition of Hybridization Reagents **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Concentration of Sample and Addition of Hybridization Reagents "));
  NGSSTARPROCESSES::Customized_Process_CleanUp_AvenioCGP_1xEthanol(ML_STAR, t_seqAspirate_CleanUpBeads, t_seqAspirate_CleanUpBeads, t_seqMIDI_HHS3_49_72, t_seqAspirate_Ethanol80, t_seqMIDI_onMagnet_49_72, ML_STAR.LiquidWaste, t_seqAspirate_UniversalEnhancingOligos, t_seqAspirate_HybridizationMasterMix, 200, t_fltVolumeCleanupBeads_P6, t_fltVolumeUniversalEnhancingOligos, t_fltVolumeHybridizationMix, 270, Translate("Roche_AVENIO_CGP_300F_CleanupBeads_SurfaceEmpty"), Translate("Roche_AVENIO_CGP_1000F_CleanupBeadsMixing_SurfaceEmpty"), Translate("Roche_AVENIO_CGP_1000F_80Ethanol_JetPart"), Translate("Roche_AVENIO_CGP_50F_UniversalEnhancingOligos_SurfaceEmpty"), Translate("Roche_AVENIO_CGP_50F_HybridizationMasterMix_SurfaceEmpty"), Translate("Roche_AVENIO_CGP_300F_Supernatant_JetEmpty"), Translate("Roche_AVENIO_CGP_300F_EthanolToWaste_JetEmpty"), 1500, 1800, 60, 60, 3, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::FALSE, 600, 180, 180, 120, 180);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_seqHSP_Pipette2, 0, 0, l_strReadCurrentBarcode, 4);
  VectorCustomDialogs::AppendStatusText(Translate("> Transfer the eluate to new HSP. "));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_onMagnet_49_72, t_seqHSP_Pipette2_1_24, t_fltVolumeEluate_P6, Translate("Roche_AVENIO_CGP_300F_HybridizationReaction_SurfaceEmpty"), 0, 0, 0, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  VectorCustomDialogs::AppendStatusText(Translate("> add AVENIO CGP Panel to the eluate. "));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_AvenioPanel, t_seqHSP_Pipette2_1_24, t_fltVolumePanel, Translate("Roche_AVENIO_CGP_50F_TumorTissuePanel_SurfaceEmpty"), 5, 0, 50, 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  VectorCustomDialogs::AppendStatusText(Translate("> return the HSP to user for external hybridization. "));
  if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("The Setup of the Hybridization reaction is complete. The samples are ready for QC"));
  }
  l_blnPCRcompleted = 0;
  if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  }
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  l_arrListExternalThermalCyclingMessage.SetSize(0);
  l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Hybridization is performed off-deck."));
  l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
  l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please recover the HSP plate containing the Hybridization reaction from the - FOURTH - position."));
  l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Seal the plate and incubate the Hybridization reaction in an external thermocycler according to the Kit manual instructions."));
  l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
  l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
  l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("Off-deck incubation of hybridization reaction"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
  if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
  {
    abort;
  }
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
  {
    {
      loopCounter1 = 0;
      while (1 == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_6 ;
        err.Clear();
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        break;
        errLabel_6 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
          NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
          NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
        }   /* end if from skip handler if no error */
      }
    }
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD COMPLETE: Process 6: Prepare And Perform Hybridization ******************\n*************************************************************************************************************************"));
}

private function Process07_PrepareCaptureBeads(  ) void {
  private variable l_strReadCurrentBarcode;
  private variable loopCounter2;
  private timer l_strCaptureBeadsIncubationTimer;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process 7: Prepare Capture Beads ******************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Section 4: Prepare Capture Beads & Perform Hybridization Cleanup"));
  VectorCustomDialogs::SetStatusText(Translate("Process 7: Prepare Capture Beads"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 7: Prepare Capture Beads"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsP7, t_intRequiredNumberOf300uLTipsP7, t_intRequiredNumberOf1000uLTipsP7, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if (t_blnAllowOptimization == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
  }
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_trpHSP_HHS2, 0, 1, l_strReadCurrentBarcode, 4);
  SeqIncrement(t_trp_Stack4, 1);
  MECC::TraceComment(Translate("*********** Mix Capture Beads before transfer **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Mix Capture Beads before transfer to MIDI plate."));
  NGSSTARPROCESSES::PIP_MixOnly(ML_STAR, t_seqAspirate_CaptureBeads, 0, Translate("Roche_AVENIO_CGP_1000F_CaptureBeadsMixing_SurfaceEmpty"), 10, 0);
  MECC::TraceComment(Translate("*********** Transfer Capture Beads to MIDI Plate **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Transfer Capture Beads to MIDI plate."));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_CaptureBeads, t_seqMIDI_Pipette_73_96, t_fltVolumeCaptureBeads, Translate("Roche_AVENIO_CGP_300F_CaptureBeads_SurfaceEmpty"), 3, 0, 0, 0, 1, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("*********** Transport MIDI plate containing the Capture Beads **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Transport MIDI plate containing Capture Beads to Magnet."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette, t_trpMIDI_OnMagnet, 0, 1, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("*********** capture Capture Beads **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Collect Capture Beads."));
  NGSSTARPROCESSES::DATA_IncubationTimer(l_strCaptureBeadsIncubationTimer, 120, 1);
  MECC::TraceComment(Translate("*********** remove supernatant **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Remove 1st supernatant from Capture Beads."));
  NGSSTARPROCESSES::PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, t_seqMIDI_onMagnet_73_96, ML_STAR.LiquidWaste, t_fltVolumeCaptureBeadsSupernatant, Translate("Roche_AVENIO_CGP_300F_CaptureBeadsSupernatant_JetEmpty"));
  VectorCustomDialogs::AppendStatusText(Translate("> Start washes of Capture Beads with Binding Buffer."));
  {
    for(loopCounter2 = 0; loopCounter2 < 2;)
    {
      loopCounter2 = loopCounter2 + 1;
      if (loopCounter2 == 1)
      {
        VectorCustomDialogs::AppendStatusText(Translate("> 1st wash."));
      }
      else
      {
        VectorCustomDialogs::AppendStatusText(Translate("> 2nd wash."));
      }
      MECC::TraceComment(Translate("*********** Add Bead Wash Buffer **********"));
      VectorCustomDialogs::AppendStatusText(Translate("> Add Bead Wash Buffer to dry Capture Beads."));
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_BeadWashBuffer, t_seqMIDI_onMagnet_73_96, t_fltVolume1xBeadWashBuffer, Translate("Roche_AVENIO_CGP_1000F_BeadWashBuffer_JetPart"), 0, 0, 0, 0, 20, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
      MECC::TraceComment(Translate("*********** Transport MIDI plateto shaker **********"));
      VectorCustomDialogs::AppendStatusText(Translate("> Transport MIDI plate containing Capture Beads and Bead Wash Buffer to Shaker."));
      NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
      MECC::TraceComment(Translate("*********** Shake **********"));
      VectorCustomDialogs::AppendStatusText(Translate("> Shake."));
      NGSSTARPREP::HHS_Shake(t_intHHS3_HSP3_MIDI3, 1800, 60);
      MECC::TraceComment(Translate("*********** Transport MIDI plate back to Magnet **********"));
      VectorCustomDialogs::AppendStatusText(Translate("> Transport MIDI plate containing Capture Beads and Bead Wash Buffer to Magnet."));
      NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpHHS3_MIDI, t_trpMIDI_OnMagnet, 0, 1, l_strReadCurrentBarcode, 4);
      MECC::TraceComment(Translate("*********** capture Capture Beads **********"));
      VectorCustomDialogs::AppendStatusText(Translate("> Collect Capture Beads."));
      NGSSTARPROCESSES::DATA_IncubationTimer(l_strCaptureBeadsIncubationTimer, 60, 1);
      MECC::TraceComment(Translate("*********** remove Bead Wash Buffer **********"));
      VectorCustomDialogs::AppendStatusText(Translate("> Discard Bead Wash Buffer."));
      NGSSTARPROCESSES::PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, t_seqMIDI_onMagnet_73_96, ML_STAR.LiquidWaste, t_fltVolume1xBeadWashBufferSupernatant, Translate("Roche_AVENIO_CGP_300F_CaptureBeadsSupernatant_JetEmpty"));
    }
  }
  MECC::TraceComment(Translate("*********** Add 75 uL Bead Wash Buffer **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> add 75 uL of Bead Wash Buffer to Capture Beads."));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_BeadWashBuffer, t_seqMIDI_onMagnet_73_96, t_fltVolume1xBeadWashBufferResuspension, Translate("Roche_AVENIO_CGP_300F_BeadWashBuffer_JetPart"), 0, 0, 0, 0, 20, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  MECC::TraceComment(Translate("*********** Transport MIDI plate containing Capture Beads and Bead Wash Buffer to Shaker **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Transport MIDI plate containing Capture Beads and Bead Wash Buffer to Shaker."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpHHS3_MIDI, 0, 0, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("*********** Shake **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Shake."));
  NGSSTARPREP::HHS_Shake(t_intHHS3_HSP3_MIDI3, 1800, 60);
  MECC::TraceComment(Translate("*********** Transport MIDI plate back to Magnet **********"));
  VectorCustomDialogs::AppendStatusText(Translate("> Transport MIDI plate containing Capture Beads and Bead Wash Buffer to Magnet."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpHHS3_MIDI, t_trpMIDI_OnMagnet, 0, 1, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("*************************************************************************************************************************\n*********************** SUBMETHOD COMPLETE: Process 7: Prepare Capture Beads *********************\n*************************************************************************************************************************"));
}

private function Process08_PerformHybridizationCleanUp(  ) void {
  private variable l_blnPCRcompleted;
  private variable loopCounter1;
  private variable l_strReadCurrentBarcode;
  private variable l_intReturnValue_ExternalThermalCycling;
  private timer l_strHHSHeatupTimer;
  private variable l_arrListExternalThermalCyclingMessage[];
  private variable loopCounter3;
  private sequence l_seqSourceStringentWashBuffer_hot;
  private timer l_strHybridizationCaptureTimer;
  private timer l_strTimerMagnetIncubation;
  private variable l_arrListLoadHybridizedSamplesMessage[];
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process 8: Perform Hybridization Cleanup ******************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Section 4: Prepare Capture Beads & Perform Hybridization Cleanup"));
  VectorCustomDialogs::SetStatusText(Translate("Process 8: Hybridization Cleanup"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 8: Perform Hybridization Cleanup"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsP8, t_intRequiredNumberOf300uLTipsP8, t_intRequiredNumberOf1000uLTipsP8, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  MECC::TraceComment(Translate("*********** Transfer Hybridization Wash Buffer 1 to HSP for warming **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Transfer Hybridization Wash Buffer 1 to heat-up position"));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_HybWashBuffer1, t_seqHSS2_HSP_1_24, t_fltVolumeHybridizationWash1_Hot, Translate("Roche_AVENIO_CGP_1000F_WashBuffer1_SurfacePart"), 3, 0, 0, 0, 5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("*********** Transfer Stringent Wash Buffer to HSP for warming **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Transfer Stringent Wash Buffer to heat-up position"));
  MECC::TraceComment(Translate("*********** First Wash **********"));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_StringentWashBuffer, t_seqHSS2_HSP_25_48, t_fltVolumeStringentWashBuffer_hot1, Translate("Roche_AVENIO_CGP_1000F_StringentWashBuffer_SurfacePart"), 3, 0, 0, 0, 5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("*********** 2nd Wash **********"));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_StringentWashBuffer, t_seqHSS2_HSP_49_72, t_fltVolumeStringentWashBuffer_hot1, Translate("Roche_AVENIO_CGP_1000F_StringentWashBuffer_SurfacePart"), 3, 0, 0, 0, 5, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("*********** ramp up the necessary heater shakers **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Start to heat HHS"));
  NGSSTARPREP::HHS_SetTemperature(t_intHHS1_HSP1, 61);
  NGSSTARPREP::HHS_SetTemperature(t_intHHS2_HSP2, 61);
  NGSSTARPREP::HHS_SetTemperature(t_intHHS4_MIDI1, 61);
  NGSSTARPREP::HHS_SetTemperature(t_intHHS5_MIDI2, 61);
  MECC::TraceComment(Translate("*********** wait 5 minutes for the hhs to reach the temperature **********"));
  NGSSTARPROCESSES::DATA_IncubationTimer(l_strHHSHeatupTimer, 300, 1);
  VectorCustomDialogs::SetStatusText(Translate("> Load hybridized samples to deck."));
  if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("The System is waiting for the hybridized samples"));
  }
  if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  }
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  l_arrListLoadHybridizedSamplesMessage.SetSize(0);
  l_arrListLoadHybridizedSamplesMessage.AddAsLast(Translate("The system is ready to load the hybridized samples plate."));
  l_arrListLoadHybridizedSamplesMessage.AddAsLast(Translate(" "));
  l_arrListLoadHybridizedSamplesMessage.AddAsLast(Translate("Please place the plate at the - FOURTH - position."));
  l_arrListLoadHybridizedSamplesMessage.AddAsLast(Translate(" "));
  l_arrListLoadHybridizedSamplesMessage.AddAsLast(Translate("Selecting OK will load the carrier and continue the current process."));
  l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("Load hybridized samples plate."), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate("Please remove the sealing foil from the plate!"), l_arrListLoadHybridizedSamplesMessage);
  if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
  {
    abort;
  }
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
  {
    {
      loopCounter1 = 0;
      while (1 == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_7 ;
        err.Clear();
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        break;
        errLabel_7 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
          NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
          NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
        }   /* end if from skip handler if no error */
      }
    }
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }
  MECC::TraceComment(Translate("*********** Transport Hybridization Plate to HHS1 to keep temperature **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Transport plate with hybridized samples to HHS1."));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, ML_STAR.HHS1_HSP, 0, 1, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("*********** Remove the last Bead Wash Buffer Supernatant **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Remove last bead wash buffer from Capture Beads."));
  NGSSTARPROCESSES::PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, t_seqMIDI_onMagnet_73_96, ML_STAR.LiquidWaste, t_fltVolumeCaptureBeadsSupernatant, Translate("Roche_AVENIO_CGP_300F_CaptureBeadsSupernatant_JetEmpty"));
  MECC::TraceComment(Translate("*********** Transfer the Hybridized Sample to the Steptavidin Capture Beads **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Transfer hybridized samples to Capture Beads."));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, ML_STAR.HHS1_HSP, t_seqMIDI_onMagnet_73_96, t_fltVolumeTransferHybReaction, Translate("Roche_AVENIO_CGP_300F_HybridizationReaction_SurfaceEmpty"), 5, 0, 0, 0, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("*********** Transport the Capture Beads + Sample to HHS5 **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Transport Capture Beads with samples to HHS5."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, ML_STAR.HHS5_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("*********** Shake to Mix **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Shake."));
  NGSSTARPREP::HHS_Shake(t_intHHS5_MIDI2, 1800, 60);
  MECC::TraceComment(Translate("*********** Incubate 14 mintes **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Incubate the Capture Beads with samples."));
  NGSSTARPROCESSES::DATA_IncubationTimer(l_strHybridizationCaptureTimer, 840, 2);
  MECC::TraceComment(Translate("*********** Wait for started timer **********"));
  NGSSTARPROCESSES::DATA_IncubationTimer(l_strHybridizationCaptureTimer, 840, 3);
  MECC::TraceComment(Translate("*********** transport MIDI to Shaker **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Incubate the Capture Beads with samples."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, ML_STAR.HHS5_MIDI, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("*********** START of HOT washes **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Start HOT wash with Wash Buffer 1."));
  MECC::TraceComment(Translate("*********** add Hot Hybridization Wash Buffer 1 **********"));
  VectorCustomDialogs::SetStatusText(Translate("> add HOT Hybridization Wash Buffer 1 to Capture Beads."));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSS2_HSP_1_24, t_seqMIDI_HHS3_73_96, t_fltVolumeHybridizationWash1_Hot, Translate("Roche_AVENIO_CGP_300F_HybridizationWashBufferHot_JetEmpty"), 0, 0, 0, 0, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("*********** shake **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Shake."));
  NGSSTARPREP::HHS_Shake(t_intHHS3_HSP3_MIDI3, 1200, 60);
  MECC::TraceComment(Translate("*********** transport MIDI to magnet to capture the beads and incubate **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Transport MIDI to Magnet to collect beads."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpHHS3_MIDI, t_trpMIDI_OnMagnet, 0, 1, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("*********** capture beads on magnet **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Collect Capture Beads."));
  NGSSTARPROCESSES::DATA_IncubationTimer(l_strTimerMagnetIncubation, 120, 1);
  MECC::TraceComment(Translate("*********** Discard supernatant of Hot hybridization wash buffer 1 **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Discard Hybridization Wash Buffer 1."));
  NGSSTARPROCESSES::PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, t_seqMIDI_onMagnet_73_96, ML_STAR.LiquidWaste, 160, Translate("Roche_AVENIO_CGP_300F_SupernatantHybWashBuffer1_JetEmpty"));
  {
    for(loopCounter3 = 0; loopCounter3 < 2;)
    {
      loopCounter3 = loopCounter3 + 1;
      MECC::TraceComment(Translate("*********** assignment of HHS2_HSP sector as aspiration sequence depending on loop number **********"));
      if (loopCounter3 == 1)
      {
        VectorCustomDialogs::SetStatusText(Translate("> Stringent Wash Buffer wash 1."));
        MECC::TraceComment(Translate("*********** HHS2_HSP sector 2 **********"));
        SeqOperatorAssignSeq(l_seqSourceStringentWashBuffer_hot, t_seqHSS2_HSP_25_48);
      }
      else
      {
        VectorCustomDialogs::SetStatusText(Translate("> Stringent Wash Buffer wash 2."));
        MECC::TraceComment(Translate("*********** HHS2_HSP sector 3 **********"));
        SeqOperatorAssignSeq(l_seqSourceStringentWashBuffer_hot, t_seqHSS2_HSP_49_72);
      }
      MECC::TraceComment(Translate("*********** add Hot Stringent Wash Buffer to Beads **********"));
      VectorCustomDialogs::SetStatusText(Translate("> add Stringent Wash Buffer to Capture Beads."));
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, l_seqSourceStringentWashBuffer_hot, t_seqMIDI_onMagnet_73_96, t_fltVolumeStringentWashBuffer_hot1, Translate("Roche_AVENIO_CGP_300F_StringentWashBufferHOT_SurfaceEmpty"), 0, 0, 0, 0, 5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
      MECC::TraceComment(Translate("*********** Transport the MIDI to Shaker for agitation **********"));
      VectorCustomDialogs::SetStatusText(Translate("> Transport MIDI to HHS."));
      NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, ML_STAR.HHS5_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
      MECC::TraceComment(Translate("*********** Shake **********"));
      VectorCustomDialogs::SetStatusText(Translate("> Shake."));
      NGSSTARPREP::HHS_Shake(t_intHHS5_MIDI2, 1800, 80);
      MECC::TraceComment(Translate("*********** Incubate **********"));
      VectorCustomDialogs::SetStatusText(Translate("> Incubation."));
      NGSSTARPROCESSES::DATA_IncubationTimer(l_strTimerMagnetIncubation, 300, 1);
      MECC::TraceComment(Translate("*********** transport MIDI to magnet to capture the beads and incubate **********"));
      VectorCustomDialogs::SetStatusText(Translate("> Transport MIDI plate from shaker to Magnet."));
      NGSSTARPROCESSES::Trp_MIDI(ML_STAR, ML_STAR.HHS5_MIDI, t_trpMIDI_OnMagnet, 0, 1, l_strReadCurrentBarcode, 4);
      MECC::TraceComment(Translate("*********** capture beads on magnet **********"));
      VectorCustomDialogs::SetStatusText(Translate("> Collect Capture Beads."));
      NGSSTARPROCESSES::DATA_IncubationTimer(l_strTimerMagnetIncubation, 120, 1);
      MECC::TraceComment(Translate("*********** Discard supernatant of Hot stringent wash buffer **********"));
      VectorCustomDialogs::SetStatusText(Translate("> Discard Stringent Wash Buffer."));
      NGSSTARPROCESSES::PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, t_seqMIDI_onMagnet_73_96, ML_STAR.LiquidWaste, t_fltVolumeStringentWashBuffer_hot2, Translate("Roche_AVENIO_CGP_300F_SupernatantStringentWashBuffer_JetEmpty"));
    }
  }
  MECC::TraceComment(Translate("*********** Transport of dry MIDI to HHS3  **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Transport MIDI with hot washed Captures to HHS3."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("*********** Add cold Hybridization Wash Buffer 1 **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Add room temperature Hybridization Wash Buffer 1."));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_HybWashBuffer1, t_seqMIDI_HHS3_73_96, t_fltVolumeHybridizationWash1_RT, Translate("Roche_AVENIO_CGP_1000F_WashBuffer1_JetPart"), 0, 0, 0, 0, 10, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("*********** Shake  **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Shake."));
  NGSSTARPREP::HHS_Shake(t_intHHS3_HSP3_MIDI3, 1500, 60);
  MECC::TraceComment(Translate("*********** Incubation  **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Incubate."));
  NGSSTARPROCESSES::DATA_IncubationTimer(l_strTimerMagnetIncubation, 60, 1);
  MECC::TraceComment(Translate("*********** Transport MIDI to Magnet to capture Beads and Incubate **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Transport MIDI to Magnet to capture Beads."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpHHS3_MIDI, t_trpMIDI_OnMagnet, 0, 1, l_strReadCurrentBarcode, 4);
  VectorCustomDialogs::SetStatusText(Translate("> Incubate."));
  NGSSTARPROCESSES::DATA_IncubationTimer(l_strTimerMagnetIncubation, 120, 1);
  MECC::TraceComment(Translate("*********** Discard supernatant of room temperature Hybridization wash buffer 1 **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Discard supernatant of room temperature Hybridization wash buffer 1."));
  NGSSTARPROCESSES::PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, t_seqMIDI_onMagnet_73_96, ML_STAR.LiquidWaste, t_fltVolumeHybridizationWash1_RT, Translate("Roche_AVENIO_CGP_300F_SupernatantHybWashBuffer1_JetEmpty"));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("*********** Add cold Hybridization Wash Buffer 2 **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Add room temperature Hybridization Wash Buffer 2."));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_HybWashBuffer2, t_seqMIDI_HHS3_73_96, t_fltVolumeHybridizationWash2, Translate("Roche_AVENIO_CGP_1000F_WashBuffer2_JetPart"), 0, 0, 0, 0, 10, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  VectorCustomDialogs::SetStatusText(Translate("> Shake."));
  NGSSTARPREP::HHS_Shake(t_intHHS3_HSP3_MIDI3, 1500, 60);
  VectorCustomDialogs::SetStatusText(Translate("> Incubate."));
  NGSSTARPROCESSES::DATA_IncubationTimer(l_strTimerMagnetIncubation, 60, 1);
  VectorCustomDialogs::SetStatusText(Translate("> Transport MIDI from HHS3 to Magnet for Bead Capture."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpHHS3_MIDI, t_trpMIDI_OnMagnet, 0, 1, l_strReadCurrentBarcode, 4);
  VectorCustomDialogs::SetStatusText(Translate("> Incubate."));
  NGSSTARPROCESSES::DATA_IncubationTimer(l_strTimerMagnetIncubation, 180, 1);
  MECC::TraceComment(Translate("*********** Add cold Hybridization Wash Buffer 2 **********"));
  VectorCustomDialogs::SetStatusText(Translate("> Discard Wash Buffer 2."));
  NGSSTARPROCESSES::PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, t_seqMIDI_onMagnet_73_96, ML_STAR.LiquidWaste, t_fltVolumeHybridizationWash2, Translate("Roche_AVENIO_CGP_300F_SupernatantHybWashBuffer2_JetEmpty"));
  VectorCustomDialogs::SetStatusText(Translate("> Transport MIDI back to HHS3."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("*********** Add cold Hybridization Wash Buffer 3 **********"));
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_HybWashBuffer3, t_seqMIDI_HHS3_73_96, t_fltVolumeHybridizationWash3, Translate("Roche_AVENIO_CGP_1000F_WashBuffer3_JetPart"), 0, 0, 0, 0, 10, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPREP::HHS_Shake(t_intHHS3_HSP3_MIDI3, 1800, 120);
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpHHS3_MIDI, t_trpMIDI_OnMagnet, 0, 1, l_strReadCurrentBarcode, 4);
  NGSSTARPROCESSES::DATA_IncubationTimer(l_strTimerMagnetIncubation, 180, 1);
  NGSSTARPROCESSES::PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, t_seqMIDI_onMagnet_73_96, ML_STAR.LiquidWaste, t_fltVolumeHybridizationWash3, Translate("Roche_AVENIO_CGP_300F_SupernatantHybWashBuffer3_JetEmpty"));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_NucleasefreeWater, t_seqMIDI_HHS3_73_96, t_fltVolumeNucleaseFreeWater_P8, Translate("Roche_AVENIO_CGP_50F_NucleaseFreeWater_SurfaceEmpty"), 5, 0, 20, 0, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPREP::HHS_Shake(t_intHHS3_HSP3_MIDI3, 1500, 60);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode, 4);
  SeqIncrement(t_trp_Stack4, 1);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_HHS3_73_96, t_seqHSP_Pipette2_1_24, t_fltVolumeEluate_P8, Translate("Roche_AVENIO_CGP_50F_EnrichedLibrariesAndBeads_SurfaceEmpty"), 10, 20, 0, 0.2, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, ML_STAR.HHS1_HSP, t_trpHSP_Pipette, 0, 0, l_strReadCurrentBarcode, 4);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette, t_trpHSP_Waste, 0, 0, l_strReadCurrentBarcode, 4);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, ML_STAR.HHS2_HSP, t_trpHSP_Waste, 0, 0, l_strReadCurrentBarcode, 4);
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpHHS3_MIDI, t_trpMIDI_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  if (t_intSelectedIndexSTOP == 8)
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("The Hybridized, Captured and Washed Libraries are ready for off-deck performance of the PCR"));
    }
    l_blnPCRcompleted = 0;
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Amplification of enriched FFPE samples is performed off-deck."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please recover the HSP plate containing the Hybridized, captured and washed samples from the - FOURTH - position."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("NOTE: This is NOT a SAFE STOPPING point. Please proceed with the protocol as soon as possible."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("The purified amplified libraries are located in Columns 7 - 9 of the plate."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("Perform the Amplification of the enriched FFPE sample off-deck."), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_8 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_8 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  else
  {
  }
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************* SUBMETHOD COMPLETE: Process 8: Perform Hybridization CleanUp *****************\n*************************************************************************************************************************"));
}

private function Process09_AmplifyEnrichedFFPEDNASample(  ) void {
  private variable l_blnPCRcompleted;
  private variable loopCounter1;
  private variable l_strReadCurrentBarcode;
  private variable l_intReturnValue_ExternalThermalCycling;
  private variable l_arrListExternalThermalCyclingMessage[];
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process9: Amplify Enriched FFPE DNA Sample ******************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process9: Amplify Enriched FFPE DNA Sample"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process9: Amplify Enriched FFPE DNA Sample"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsP9, t_intRequiredNumberOf300uLTipsP9, t_intRequiredNumberOf1000uLTipsP9, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_PCRMasterMix, t_seqHSP_Pipette2_1_24, t_fltVolumePCRReactionMix_P9, Translate("Roche_AVENIO_CGP_50F_PCRMasterMix_SurfaceEmpty"), 5, 0, 40, 0, 2, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, Translate(""), Translate("Roche_AVENIO_CGP_PostCapturePCR_15"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 0, l_strReadCurrentBarcode);
  }
  else
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Run the - Amplify enriched FFPE DNA sample - on an external thermocycler"));
    }
    l_blnPCRcompleted = 0;
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Amplification of enriched FFPE samples is performed off-deck."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please remove the - Amplify enriched FFPE DNA sample - plate, seal it and perform \nthe following incubation in an external cycler as specified in the Kits Manual:"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    if (t_arrBlnProcessActivation.ElementAt( 10 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("AFTER PCR Amplification reaction: \n Please place the processed DNA Amplification plate to the unloaded carrier at the - FOURTH - position."));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    }
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_9 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_9 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD COMPLETE: Process9: Amplify Enriched FFPE DNA Sample ******************\n*************************************************************************************************************************"));
}

private function Process10_CleanUpAmplifiedEnrichedLibraries(  ) void {
  private variable l_blnPCRcompleted;
  private variable l_strReadCurrentBarcode;
  private variable l_intReturnValue_ExternalThermalCycling;
  private timer l_strMagnetIncubationTimer;
  private variable l_arrListExternalThermalCyclingMessage[];
  MECC::TraceComment(Translate("*************************************************************************************************************************\n****************** SUBMETHOD START: Process10: Cleanup Amplified Enriched Libraries ****************\n*************************************************************************************************************************"));
  VectorCustomDialogs::Terminate();
  VectorCustomDialogs::Initialize();
  VectorCustomDialogs::ShowStatusDialog(Translate("Process10: Cleanup Amplified Enriched Libraries"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process10: Cleanup Amplified Enriched Libraries"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsP10, t_intRequiredNumberOf300uLTipsP10, t_intRequiredNumberOf1000uLTipsP10, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack1, t_trpHHS3_MIDI, 0, 0, l_strReadCurrentBarcode, 4);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_OnMagnet, 0, 1, l_strReadCurrentBarcode, 4);
  NGSSTARPROCESSES::DATA_IncubationTimer(l_strMagnetIncubationTimer, 120, 1);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_OnMagnet, t_seqMIDI_HHS3_1_24, 50, Translate("Roche_AVENIO_CGP_50F_SupernatantPCRMMAndBeads_SurfaceEmpty"), 0, 0, 0, 0.2, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_OnMagnet, t_trpHSP_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  NGSSTARPROCESSES::Process_CleanUp(ML_STAR, t_seqAspirate_CleanUpBeads, t_seqAspirate_CleanUpBeads, t_seqMIDI_HHS3_1_24, t_seqAspirate_Ethanol80, t_seqMIDI_onMagnet_1_24, ML_STAR.LiquidWaste, t_seqAspirate_NucleasefreeWater, 200, t_fltVolumeCleanupBeads_P10, t_fltVolumeNucleaseFreeWater_P10, 100, Translate("Roche_AVENIO_CGP_300F_CleanupBeads_SurfaceEmpty"), Translate("Roche_AVENIO_CGP_300F_CleanupBeadsMixing_SurfaceEmpty"), Translate("Roche_AVENIO_CGP_1000F_80Ethanol_JetPart"), Translate("Roche_AVENIO_CGP_50F_NucleaseFreeWater_SurfaceEmpty"), Translate("Roche_AVENIO_CGP_300F_Supernatant_JetEmpty"), Translate("Roche_AVENIO_CGP_300F_EthanolToWaste_JetEmpty"), 1500, 1200, 60, 60, 3, t_intHHS3_HSP3_MIDI3, 0, 600, 180, 180, 120, 180);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode, 4);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_onMagnet_1_24, t_seqHSP_Pipette2_1_24, t_fltVolumeNucleaseFreeWater_P10, Translate("Roche_AVENIO_CGP_50F_CleanSamples_SurfaceEmpty"), 0, 0, 0, 0.2, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, ML_STAR.HHS1_HSP, t_trpHSP_Waste, 0, 0, l_strReadCurrentBarcode, 4);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, ML_STAR.HHS2_HSP, t_trpHSP_Waste, 0, 0, l_strReadCurrentBarcode, 4);
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Run the - Amplify enriched FFPE DNA sample - on an external thermocycler"));
  }
  l_blnPCRcompleted = 0;
  if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  }
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  l_arrListExternalThermalCyclingMessage.SetSize(0);
  l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Cleanup of Post Capture Amplification Reaction is finished."));
  l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
  l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please recover the sequencing ready library from the - FOURTH - position and perform necessary QC measurements."));
  l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
  l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
  l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("Sequencing ready libraries"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
  if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
  {
    abort;
  }
  MECC::TraceComment(Translate("*************************************************************************************************************************\n****************** SUBMETHOD COMPLETE: Process10: Cleanup Amplified Enriched Libraries ****************\n*************************************************************************************************************************"));
}
