#pragma once
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLUtilLib.hsl"
#include "HSLExtensions\\Sequence.hsl"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "HSLMthLib.hsl"
#include "HSLTimLib.hsl"
#include "Labware Properties\\Labware_Property_Query.hs_"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLDevLib.hsl"
#include "HSLDeckVisualize.hsl"
#include "ArrayTools\\ArrayTools.hs_"
#include "HSLExtensions\\File.hsl"
#include "InstrumentTypeHelper.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace DATA_CONTROLLER {
  variable t_intTraceLevel;
  variable t_blnSimulationModeON;
  variable t_strFullPathReportFile;
  variable t_strMethodName;
  variable t_strLibraryName;
  variable t_strFunctionName;
  variable t_intNumberOfSamples;
  variable t_blnUseShortTimers;
  function CalculateTipConsumption( variable i_intNumberOfPositionIDs, variable i_intNumberOfTransfersChannels, variable i_intNumberOfExtraTips, variable i_intNumberOfTransfersMPH, variable & o_intScheduledTipConsumption ) variable ;
  function Init( device & ML_STAR, variable i_blnUseShortTimers, variable & o_strFullPathReportFile, variable & o_strNameAndVersion, variable & o_intPlatformType, variable & o_strKitProvider, variable & o_strKitName, variable & o_strMethodName, variable & o_strMethodDirectory ) variable ;
  private function InterpreteLabwareID( variable & o_strTypeOfLabware, sequence i_seqToBeAnalyzed, device & ML_STAR ) variable ;
  function Read_InputWorklist_ExcelOrCSVFormat( variable i_strInputWorklist, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & o_arrIndex1SeqPositions[], variable & o_arrIndex1IDs[], variable & o_arrIndex2SeqPositions[], variable & o_arrIndex2IDs[], variable & o_arrSamplePlatePositionID[], variable & o_arrSampleIDs[], variable & o_strIndexLabwareFormat ) variable ;
  function Reportfile_UpdateData( variable i_strInformationToUpdateReportList, variable i_blnUpdateInformationToStatusWindow ) variable ;
  function Sequence_CalculateAndDefineBatchProcess( variable i_intNumberOfColumnsWithinOneBatch, sequence & i_seqMagneticStandPosition, sequence & o_arrSeqMagneticStandPositionBatchwiseSorted[], variable & o_intNumberOfCalculatedBatchesToBeProcessed ) variable ;
  function Sequence_CreateNewPipettingOrTransportSequences( sequence i_sequenceTemplate, variable & i_arrPositionIDs[], sequence & o_seqCreated, variable i_intSequenceType ) variable ;
  function Sequence_DefineStacks( device & ML_STAR, sequence i_seqOriginalInputLabware, variable i_intRequestedNumberOfUnitsPerStack, variable i_intMaximumNumberOfUnitsPerStackAllowed, sequence & o_trpStackDescending, sequence & o_trpStackAscending ) variable ;
  function Sequence_ReformatToMatchNumberOfSamples( device & ML_STAR, sequence i_seq_Template, variable i_int_StartingPoint, variable i_int_NumberOfSamples, sequence & o_seqCreated ) variable ;
  function Show_PropertiesArray( variable & i_arrayToBeAnalyzed[], variable i_intPresentationMode ) variable ;
  function Show_PropertiesSequence( sequence & i_seqCheckSequence, variable i_intPresentationMode ) variable ;
  function Show_PropertiesVariable( variable i_strVariableName, variable i_varVariable, variable i_intPresentationMode ) variable ;
  function Start_Function( variable & io_strFunctionName, variable i_blnUpdateReportFile ) variable ;
  function Timer_Incubation( timer & i_strIncubationTimerName, variable i_intTime, variable i_intTimerMode ) variable ;
  private function _CheckSystemConnected( device & ML_STAR, variable & o_intPlatformType, variable & o_strDeviceViewName ) variable ;
  private function _DATA_TranslateVectorCustomDialogsErrorCodes( variable i_intBindReturnValue ) void ;
  private function _Retrieve_FileFolderAndNames( variable & o_strARWPlatformName, variable & o_strKitProvider, variable & o_strKitName, variable & o_strMethodName, variable & o_strMethodDirectory ) variable ;
  private function _Version(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LPQ::_InitLibrary();
    ARRAYTOOLS::_InitLibrary();
  }
  function _ExitLibrary() {
    LPQ::_ExitLibrary();
    ARRAYTOOLS::_ExitLibrary();
  }

  function Init( device & ML_STAR, variable i_blnUseShortTimers, variable & o_strFullPathReportFile, variable & o_strNameAndVersion, variable & o_intPlatformType, variable & o_strKitProvider, variable & o_strKitName, variable & o_strMethodName, variable & o_strMethodDirectory ) variable {
    private variable l_strTransferVolume;
    private variable l_strPosIDTarget;
    private variable l_strTranslatedPipettingInformationDispense;
    private variable l_strTranslatedPipettingInformationAspiration;
    private variable l_strLabIDSource;
    private variable l_strCurrentTime;
    private variable l_strCurrentDate;
    private variable l_strTranslatedTransportInformation;
    private variable l_strPosIDSource;
    private variable l_strLabIDTarget;
    private variable l_strBarcodeInformation;
    private file l_hdlARWReportFile;
    private variable l_strDescription;
    private variable l_str_ReturnNameAndVersion;
    private variable l_strControllerVersion;
    private variable l_strComment;
    private variable l_strARWPlatformName;
    private variable l_strDeviceViewName;
    private variable t_strLibraryNameWithoutExtension;
    o_strFullPathReportFile = 0;
    o_strNameAndVersion = 0;
    o_intPlatformType = 0;
    o_strKitProvider = 0;
    o_strKitName = 0;
    o_strMethodName = 0;
    o_strMethodDirectory = 0;
    t_intTraceLevel = TRACELEVEL::GetTraceLevel();
    t_strMethodName = Translate("");
    t_strMethodName = GetMethodFileName();
    t_strLibraryName = Translate("");
    t_strFunctionName = Translate("");
    l_strControllerVersion = Translate("");
    l_str_ReturnNameAndVersion = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    l_strControllerVersion = "0.5.12";
    t_strLibraryNameWithoutExtension = HSLExtensions::File::GetFileNameWithoutExtension(t_strLibraryName);
    o_strNameAndVersion = StrConcat4(t_strLibraryNameWithoutExtension, Translate(" "), l_strControllerVersion, Translate(""));
    l_strDescription = o_strNameAndVersion;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strDescription);
    t_blnUseShortTimers = i_blnUseShortTimers;
    t_blnSimulationModeON = Util::GetSimulationMode();
    l_strCurrentDate = TimGetFormattedDate(Translate("%Y%m%d"));
    l_strCurrentTime = TimGetFormattedTime(Translate("%H%M%S"));
    _CheckSystemConnected(ML_STAR, o_intPlatformType, l_strDeviceViewName);
    _Retrieve_FileFolderAndNames(l_strARWPlatformName, o_strKitProvider, o_strKitName, o_strMethodName, o_strMethodDirectory);
    t_strFullPathReportFile = StrConcat12(Translate("C:\\Program Files (x86)\\HAMILTON\\LogFiles\\"), o_strKitName, Translate("_"), Translate(""), Translate("RunReport_"), l_strCurrentDate, Translate("_"), l_strCurrentTime, Translate(".xls"), Translate(""), Translate(""), Translate(""));
    onerror goto errLabel_1 ;
    err.Clear();
    l_hdlARWReportFile.SetExtendedProperties( "HDR=NO");
    l_hdlARWReportFile.AddField("Date", l_strCurrentDate, hslString, 255);
    l_hdlARWReportFile.AddField("Time", l_strCurrentTime, hslString, 255);
    l_hdlARWReportFile.AddField("LabID Source", l_strLabIDSource, hslString, 255);
    l_hdlARWReportFile.AddField("PosID Source", l_strPosIDSource, hslString, 255);
    l_hdlARWReportFile.AddField("Transfer Volume", l_strTransferVolume, hslString, 255);
    l_hdlARWReportFile.AddField("LabID Target", l_strLabIDTarget, hslString, 255);
    l_hdlARWReportFile.AddField("PosID Target", l_strPosIDTarget, hslString, 255);
    l_hdlARWReportFile.AddField("Barcode", l_strBarcodeInformation, hslString, 255);
    l_hdlARWReportFile.AddField("Transport information", l_strTranslatedTransportInformation, hslString, 255);
    l_hdlARWReportFile.AddField("Aspiration information", l_strTranslatedPipettingInformationAspiration, hslString, 255);
    l_hdlARWReportFile.AddField("Dispense information", l_strTranslatedPipettingInformationDispense, hslString, 255);
    if( 0 == l_hdlARWReportFile.Open(t_strFullPathReportFile + " " + "RuntimeReport", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
    }
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      VectorCustomDialogs::MessageDialog(Translate("File handling warning"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("No data could be written or updated into the selected reprot file."));
      return (ASWGLOBAL::BOOL::FALSE);
    }   /* end if from skip handler if no error */
    if( 0 != l_hdlARWReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlARWReportFile.RemoveFields();
    o_strFullPathReportFile = t_strFullPathReportFile;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Created report file : "), o_strFullPathReportFile);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Sequence_ReformatToMatchNumberOfSamples( device & ML_STAR, sequence i_seq_Template, variable i_int_StartingPoint, variable i_int_NumberOfSamples, sequence & o_seqCreated ) variable {
    private variable l_strGetLabwareID;
    private variable l_intIndexSequenceGeneration;
    private variable l_intGetCurrentPosition;
    private sequence l_seqIntermediate;
    private variable l_strGetPositionID;
    private variable l_strComment;
    { sequence __temp; o_seqCreated = __temp; }
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    SeqRemoveAll(o_seqCreated);
    SeqRemoveAll(l_seqIntermediate);
    l_seqIntermediate = HSLExtensions::Sequence::Copy(i_seq_Template, 3);
    l_intGetCurrentPosition = i_seq_Template.GetCurrentPosition();
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Number of samples : "), i_int_NumberOfSamples);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seq_Template);
    if (i_int_StartingPoint == 0)
    {
      l_seqIntermediate.SetCurrentPosition(l_intGetCurrentPosition);
    }
    else
    {
      l_seqIntermediate.SetCurrentPosition(i_int_StartingPoint);
    }
    l_seqIntermediate = HSLExtensions::Sequence::Copy(l_seqIntermediate, 1);
    {
      for(l_intIndexSequenceGeneration = 0; l_intIndexSequenceGeneration < i_int_NumberOfSamples;)
      {
        l_intIndexSequenceGeneration = l_intIndexSequenceGeneration + 1;
        l_strGetLabwareID = SeqGetLabwareId(l_seqIntermediate);
        l_strGetPositionID = SeqGetPositionId(l_seqIntermediate);
        if (l_strGetPositionID == "")
        {
          l_seqIntermediate.SetCurrentPosition(1);
          l_strGetPositionID = SeqGetPositionId(l_seqIntermediate);
          l_strGetLabwareID = SeqGetLabwareId(l_seqIntermediate);
        }
        l_intGetCurrentPosition = SeqIncrement(l_seqIntermediate, 1);
        SeqAdd(o_seqCreated, l_strGetLabwareID, l_strGetPositionID);
      }
    }
    o_seqCreated.SetCurrentPosition(1);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, o_seqCreated);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, o_seqCreated);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Sequence_CreateNewPipettingOrTransportSequences( sequence i_sequenceTemplate, variable & i_arrPositionIDs[], sequence & o_seqCreated, variable i_intSequenceType ) variable {
    private variable l_intElementCounter;
    private variable l_strLabwareIDOfTemplateSequence;
    private variable l_intSizeOfArrayContainingPositionIDs;
    private variable l_strComment;
    private variable l_strPositionID;
    { sequence __temp; o_seqCreated = __temp; }
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    i_sequenceTemplate.SetCurrentPosition(1);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_sequenceTemplate);
    SeqRemoveAll(o_seqCreated);
    if (i_intSequenceType == 1)
    {
      l_strLabwareIDOfTemplateSequence = SeqGetLabwareId(i_sequenceTemplate);
      l_intSizeOfArrayContainingPositionIDs=i_arrPositionIDs.GetSize();
      {
        for(l_intElementCounter = 0; l_intElementCounter < l_intSizeOfArrayContainingPositionIDs;)
        {
          l_intElementCounter = l_intElementCounter + 1;
          SeqAdd(o_seqCreated, l_strLabwareIDOfTemplateSequence, i_arrPositionIDs.ElementAt( l_intElementCounter -1));
        }
      }
    }
    if (i_intSequenceType == 2)
    {
      l_strLabwareIDOfTemplateSequence = SeqGetLabwareId(i_sequenceTemplate);
      l_strPositionID = SeqGetPositionId(i_sequenceTemplate);
      SeqAdd(o_seqCreated, l_strLabwareIDOfTemplateSequence, l_strPositionID);
    }
    o_seqCreated.SetCurrentPosition(1);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, o_seqCreated);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _Version(  ) void {
  }

  function Reportfile_UpdateData( variable i_strInformationToUpdateReportList, variable i_blnUpdateInformationToStatusWindow ) variable {
    private variable l_strEmptyString;
    private file l_hdlARWReportFile;
    private variable l_intBindReturnValue;
    private variable l_strInformationToUpdateReportFile;
    private variable l_strComment;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strEmptyString = Translate("");
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Information To Update Report List : "), i_strInformationToUpdateReportList);
    onerror goto errLabel_2 ;
    err.Clear();
    l_hdlARWReportFile.AddField("Date", l_strInformationToUpdateReportFile, hslString, 255);
    l_hdlARWReportFile.AddField("Time", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("LabID Source", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("PosID Source", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("Transfer Volume", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("LabID Target", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("PosID Target", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("Barcode", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("Transport information", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("Aspiration information", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("Dispense information", l_strEmptyString, hslString, 255);
    if( 0 == l_hdlARWReportFile.Open(t_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
    }
    l_strInformationToUpdateReportFile = Translate("");
    if( 0 == l_hdlARWReportFile.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_strInformationToUpdateReportFile = i_strInformationToUpdateReportList;
    if( 0 == l_hdlARWReportFile.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      VectorCustomDialogs::MessageDialog(Translate("File handling warning"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("No data could be written or updated into the selected reprot file."));
      return (ASWGLOBAL::BOOL::FALSE);
    }   /* end if from skip handler if no error */
    if( 0 != l_hdlARWReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlARWReportFile.RemoveFields();
    if (i_blnUpdateInformationToStatusWindow == ASWGLOBAL::BOOL::TRUE)
    {
      onerror goto errLabel_3 ;
      err.Clear();
      l_intBindReturnValue = VectorCustomDialogs::AppendStatusText(Translate(""));
      l_intBindReturnValue = VectorCustomDialogs::AppendStatusText(i_strInformationToUpdateReportList);
      _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        l_intBindReturnValue = VectorCustomDialogs::Initialize();
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
        l_intBindReturnValue = VectorCustomDialogs::ShowStatusDialog(Translate("Data_Controller"));
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
        l_intBindReturnValue = VectorCustomDialogs::AppendStatusText(Translate(""));
        l_intBindReturnValue = VectorCustomDialogs::AppendStatusText(i_strInformationToUpdateReportList);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
      }   /* end if from skip handler if no error */
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Show_PropertiesArray( variable & i_arrayToBeAnalyzed[], variable i_intPresentationMode ) variable {
    private variable l_strCurrentContentOfArrayToBeAnalyzed;
    private variable loopCounter1;
    private variable l_strShowArrayParameterText;
    private variable l_strShowArrayParameterSummary;
    private variable l_intSizeOfArrayToBeAnalyzed;
    private variable l_strUploadContentToListArray;
    private variable l_arrListArrayParameter[];
    private variable l_intBindReturnValue;
    private variable l_strComment;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_intSizeOfArrayToBeAnalyzed=i_arrayToBeAnalyzed.GetSize();
    l_arrListArrayParameter.SetSize(0);
    l_strUploadContentToListArray = Translate("");
    l_strShowArrayParameterSummary = Translate("");
    if (l_intSizeOfArrayToBeAnalyzed == 0)
    {
      l_arrListArrayParameter.AddAsLast(Translate("Empty array detected"));
    }
    else
    {
      {
        for(loopCounter1 = 0; loopCounter1 < l_intSizeOfArrayToBeAnalyzed;)
        {
          loopCounter1 = loopCounter1 + 1;
          l_strCurrentContentOfArrayToBeAnalyzed=i_arrayToBeAnalyzed.GetAt(loopCounter1-1);
          l_strUploadContentToListArray = StrConcat4(Translate("Array content at index "), loopCounter1, Translate(" : "), l_strCurrentContentOfArrayToBeAnalyzed);
          l_arrListArrayParameter.AddAsLast(l_strUploadContentToListArray);
          l_strShowArrayParameterSummary = StrConcat4(l_strShowArrayParameterSummary, l_strUploadContentToListArray, Translate(" ; "), Translate(""));
        }
      }
    }
    if (i_intPresentationMode == 1)
    {
      l_intBindReturnValue = VectorCustomDialogs::ListDialog(Translate("Check array"), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::Ok, 0, 0, 5, Translate("All array parameter are listed below."), Translate("Press OK to continue."), l_arrListArrayParameter);
      _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
    }
    if (i_intPresentationMode == 2)
    {
      l_intBindReturnValue = VectorCustomDialogs::ShowStatusDialog(Translate("Analyze Array parameter"));
      _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
      l_strShowArrayParameterText = StrConcat2(Translate("Check Array : "), l_strShowArrayParameterSummary);
      l_intBindReturnValue = VectorCustomDialogs::SetStatusText(l_strShowArrayParameterText);
      _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Check array parameter :"), l_arrListArrayParameter);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Show_PropertiesSequence( sequence & i_seqCheckSequence, variable i_intPresentationMode ) variable {
    private variable l_strTextGetEndPosition;
    private variable l_strGetName;
    private variable l_strGetTotal;
    private variable l_intGetUsedPositions;
    private variable l_intGetEndPosition;
    private variable l_intGetTotal;
    private variable l_strSequenceParameterText;
    private variable l_strGetEndPosition;
    private variable l_strGetCurrentPositionID;
    private variable l_strGetUsedPositions;
    private variable l_strTextGetPositionID;
    private variable l_strTextGetLabwareID;
    private variable l_strTextGetTotal;
    private variable l_strTextGetUsedPositions;
    private variable l_strTextGetName;
    private variable l_arrListSequenceParameter[];
    private variable l_intGetRemaining;
    private variable l_strTextGetRemaining;
    private variable l_strGetRemaining;
    private variable l_intBindReturnValue;
    private variable l_intCurrentLabwareIDIndex;
    private variable l_intNumberOdLabwareIDs;
    private variable l_strMessageLabwareIDs;
    private variable l_arrLabwareIDs[];
    private variable l_strComment;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strTextGetTotal = Translate("Get total : ");
    l_intGetTotal = SeqGetTotal(i_seqCheckSequence);
    l_strGetTotal = StrIStr(l_intGetTotal);
    l_strTextGetTotal = StrConcat2(l_strTextGetTotal, l_strGetTotal);
    l_strTextGetUsedPositions = Translate("Get used positions : ");
    l_intGetUsedPositions = SeqGetUsedPositions(i_seqCheckSequence);
    l_strGetUsedPositions = StrIStr(l_intGetUsedPositions);
    l_strTextGetUsedPositions = StrConcat2(l_strTextGetUsedPositions, l_strGetUsedPositions);
    l_strTextGetPositionID = Translate("Get current position ID : ");
    l_strGetCurrentPositionID = SeqGetPositionId(i_seqCheckSequence);
    l_strTextGetPositionID = StrConcat2(l_strTextGetPositionID, l_strGetCurrentPositionID);
    l_intGetEndPosition = i_seqCheckSequence.GetCount();
    l_strGetEndPosition = StrIStr(l_intGetEndPosition);
    l_strTextGetEndPosition = Translate("Get end position : ");
    l_strTextGetEndPosition = StrConcat2(l_strTextGetEndPosition, l_strGetEndPosition);
    l_strTextGetLabwareID = Translate("Get current labware ID(s) : ");
    SeqGetLabwareIds(i_seqCheckSequence, l_arrLabwareIDs);
    l_intNumberOdLabwareIDs=l_arrLabwareIDs.GetSize();
    l_strMessageLabwareIDs = Translate("");
    {
      for(l_intCurrentLabwareIDIndex = 0; l_intCurrentLabwareIDIndex < l_intNumberOdLabwareIDs;)
      {
        l_intCurrentLabwareIDIndex = l_intCurrentLabwareIDIndex + 1;
        l_strMessageLabwareIDs = StrConcat4(l_strMessageLabwareIDs, Translate(""), l_arrLabwareIDs.ElementAt( l_intCurrentLabwareIDIndex -1), Translate(" ; "));
      }
    }
    l_strTextGetLabwareID = StrConcat2(l_strTextGetLabwareID, l_strMessageLabwareIDs);
    l_strTextGetRemaining = Translate("Get remaining : ");
    l_intGetRemaining = l_intGetTotal - l_intGetUsedPositions;
    l_strGetRemaining = StrIStr(l_intGetRemaining);
    l_strTextGetRemaining = StrConcat2(l_strTextGetRemaining, l_strGetRemaining);
    l_strTextGetName = Translate("Get name : ");
    l_strGetName = SeqGetName(i_seqCheckSequence);
    l_strTextGetName = StrConcat2(l_strTextGetName, l_strGetName);
    l_arrListSequenceParameter.SetSize(0);
    l_arrListSequenceParameter.AddAsLast(l_strTextGetName);
    l_arrListSequenceParameter.AddAsLast(l_strTextGetRemaining);
    l_arrListSequenceParameter.AddAsLast(l_strTextGetTotal);
    l_arrListSequenceParameter.AddAsLast(l_strTextGetEndPosition);
    l_arrListSequenceParameter.AddAsLast(l_strTextGetUsedPositions);
    l_arrListSequenceParameter.AddAsLast(l_strTextGetLabwareID);
    l_arrListSequenceParameter.AddAsLast(l_strTextGetPositionID);
    if (i_intPresentationMode == 1)
    {
      l_intBindReturnValue = VectorCustomDialogs::ListDialog(Translate("Check sequence"), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::Ok, 0, 0, 5, Translate("All sequence parameter are listed below."), Translate("Press OK to continue."), l_arrListSequenceParameter);
      _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
    }
    if (i_intPresentationMode == 2)
    {
      l_intBindReturnValue = VectorCustomDialogs::ShowStatusDialog(Translate("Analyze Sequence parameter"));
      _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
      l_strSequenceParameterText = StrConcat12(l_strTextGetName, Translate("; "), l_strTextGetRemaining, Translate("; "), l_strTextGetTotal, Translate("; "), l_strTextGetUsedPositions, Translate("; "), l_strTextGetLabwareID, Translate("; "), l_strTextGetPositionID, Translate("; "));
      l_strSequenceParameterText = StrConcat4(l_strSequenceParameterText, Translate("; "), l_strGetEndPosition, Translate("."));
      l_strSequenceParameterText = StrConcat2(Translate("Check sequence : "), l_strSequenceParameterText);
      l_intBindReturnValue = VectorCustomDialogs::SetStatusText(l_strSequenceParameterText);
      _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Check sequence parameter :"), l_arrListSequenceParameter);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, i_seqCheckSequence);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Show_PropertiesVariable( variable i_strVariableName, variable i_varVariable, variable i_intPresentationMode ) variable {
    private variable l_strTextGetVariableContent;
    private variable l_strSequenceParameterText;
    private variable l_strTextGetVariableType;
    private variable l_strTextGetVariableName;
    private variable l_strVariableParameterText;
    private variable l_strVariableGetType;
    private variable l_strTextGetType;
    private variable l_strTextGetContent;
    private variable l_strTextGetName;
    private variable l_arrListVariableParameter[];
    private variable l_intBindReturnValue;
    private variable l_strComment;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_arrListVariableParameter.SetSize(0);
    l_strTextGetName = Translate("Get name : ");
    l_strTextGetVariableName = StrConcat2(l_strTextGetName, i_strVariableName);
    l_arrListVariableParameter.AddAsLast(l_strTextGetVariableName);
    l_strVariableGetType = StrGetType(i_varVariable);
    l_strTextGetType = Translate("Get type : ");
    if (l_strVariableGetType == "i")
    {
      l_strTextGetVariableType = StrConcat2(l_strTextGetType, Translate(" integer"));
    }
    if (l_strVariableGetType == "s")
    {
      l_strTextGetVariableType = StrConcat2(l_strTextGetType, Translate(" string"));
    }
    if (l_strVariableGetType == "f")
    {
      l_strTextGetVariableType = StrConcat2(l_strTextGetType, Translate(" float"));
    }
    if (l_strVariableGetType == "")
    {
      l_strTextGetVariableType = StrConcat2(l_strTextGetType, Translate(" no type adressable"));
    }
    l_arrListVariableParameter.AddAsLast(l_strTextGetVariableType);
    l_strTextGetContent = Translate("Get content : ");
    l_strTextGetVariableContent = StrConcat2(l_strTextGetContent, i_varVariable);
    l_arrListVariableParameter.AddAsLast(l_strTextGetVariableContent);
    if (i_intPresentationMode == 1)
    {
      l_intBindReturnValue = VectorCustomDialogs::ListDialog(Translate("Check variable"), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::Ok, 0, 0, 5, Translate("All variable parameter are listed below."), Translate("Press OK to continue."), l_arrListVariableParameter);
      _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
    }
    if (i_intPresentationMode == 2)
    {
      l_intBindReturnValue = VectorCustomDialogs::ShowStatusDialog(Translate("Analyze variable parameter"));
      _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
      l_strVariableParameterText = StrConcat12(l_strTextGetVariableName, Translate("; "), l_strTextGetVariableType, Translate("; "), l_strTextGetVariableContent, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("."));
      l_strSequenceParameterText = StrConcat2(Translate("Check variable : "), l_strVariableParameterText);
      l_intBindReturnValue = VectorCustomDialogs::SetStatusText(l_strSequenceParameterText);
      _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Check variable parameter :"), l_arrListVariableParameter);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Sequence_CalculateAndDefineBatchProcess( variable i_intNumberOfColumnsWithinOneBatch, sequence & i_seqMagneticStandPosition, sequence & o_arrSeqMagneticStandPositionBatchwiseSorted[], variable & o_intNumberOfCalculatedBatchesToBeProcessed ) variable {
    private variable l_strLabwareIDOfCurrentSequnence;
    private variable l_strPositionIDOfCurrentSequence;
    private variable l_intInnerLoopCountingSequencesItems;
    private variable l_intSequenceItemsPerBatch;
    private variable l_intGetEndPositionOfSequence;
    private variable l_intIncompletefColumsToBeProcessed;
    private variable l_intLoopCounterBatch;
    private variable o_intNumberOfIncompleteBatchesToBeProcessed;
    private variable l_intInitialNumberOfColumsToBeProcessed;
    private sequence l_seqBatch5;
    private sequence l_seqBatch6;
    private sequence l_seqBatch7;
    private sequence l_seqBatch8;
    private sequence l_seqBatch9;
    private sequence l_seqBatch10;
    private sequence l_seqBatch11;
    private sequence l_seqIntermediateSequencePerBatch;
    private sequence l_seqBatch12;
    private sequence l_seqBatch1;
    private sequence l_seqBatch2;
    private sequence l_seqBatch3;
    private sequence l_seqBatch4;
    private variable l_strComment;
    o_arrSeqMagneticStandPositionBatchwiseSorted.SetSize( 0);
    o_intNumberOfCalculatedBatchesToBeProcessed = 0;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Number of columns per batch: "), i_intNumberOfColumnsWithinOneBatch);
    o_arrSeqMagneticStandPositionBatchwiseSorted.SetSize(0);
    l_intGetEndPositionOfSequence = i_seqMagneticStandPosition.GetCount();
    l_intInitialNumberOfColumsToBeProcessed = l_intGetEndPositionOfSequence / 8;
    l_intIncompletefColumsToBeProcessed = l_intGetEndPositionOfSequence % 8;
    if (l_intIncompletefColumsToBeProcessed > 0)
    {
      l_intInitialNumberOfColumsToBeProcessed = l_intInitialNumberOfColumsToBeProcessed + 1;
    }
    o_intNumberOfCalculatedBatchesToBeProcessed = l_intInitialNumberOfColumsToBeProcessed / i_intNumberOfColumnsWithinOneBatch;
    o_intNumberOfIncompleteBatchesToBeProcessed = l_intInitialNumberOfColumsToBeProcessed % i_intNumberOfColumnsWithinOneBatch;
    if (o_intNumberOfIncompleteBatchesToBeProcessed > 0)
    {
      o_intNumberOfCalculatedBatchesToBeProcessed = o_intNumberOfCalculatedBatchesToBeProcessed + 1;
    }
    l_intSequenceItemsPerBatch = i_intNumberOfColumnsWithinOneBatch * 8;
    if (i_intNumberOfColumnsWithinOneBatch >= l_intInitialNumberOfColumsToBeProcessed)
    {
      o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(i_seqMagneticStandPosition);
    }
    else
    {
      if (i_intNumberOfColumnsWithinOneBatch == 12)
      {
        o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(i_seqMagneticStandPosition);
      }
      else
      {
        {
          for(l_intLoopCounterBatch = 0; l_intLoopCounterBatch < o_intNumberOfCalculatedBatchesToBeProcessed;)
          {
            l_intLoopCounterBatch = l_intLoopCounterBatch + 1;
            SeqRemoveAll(l_seqIntermediateSequencePerBatch);
            {
              for(l_intInnerLoopCountingSequencesItems = 0; l_intInnerLoopCountingSequencesItems < l_intSequenceItemsPerBatch;)
              {
                l_intInnerLoopCountingSequencesItems = l_intInnerLoopCountingSequencesItems + 1;
                l_strLabwareIDOfCurrentSequnence = SeqGetLabwareId(i_seqMagneticStandPosition);
                l_strPositionIDOfCurrentSequence = SeqGetPositionId(i_seqMagneticStandPosition);
                if (l_strLabwareIDOfCurrentSequnence != "")
                {
                  SeqAdd(l_seqIntermediateSequencePerBatch, l_strLabwareIDOfCurrentSequnence, l_strPositionIDOfCurrentSequence);
                }
                SeqIncrement(i_seqMagneticStandPosition, 1);
              }
            }
            l_seqIntermediateSequencePerBatch.SetCurrentPosition(1);
            if (l_intLoopCounterBatch == 1)
            {
              SeqCopySequence(l_seqBatch1, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch1);
              TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, l_seqBatch1);
            }
            if (l_intLoopCounterBatch == 2)
            {
              SeqCopySequence(l_seqBatch2, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch2);
              TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, l_seqBatch2);
            }
            if (l_intLoopCounterBatch == 3)
            {
              SeqCopySequence(l_seqBatch3, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch3);
              TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, l_seqBatch3);
            }
            if (l_intLoopCounterBatch == 4)
            {
              SeqCopySequence(l_seqBatch4, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch4);
              TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, l_seqBatch4);
            }
            if (l_intLoopCounterBatch == 5)
            {
              SeqCopySequence(l_seqBatch5, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch5);
              TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, l_seqBatch5);
            }
            if (l_intLoopCounterBatch == 6)
            {
              SeqCopySequence(l_seqBatch6, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch6);
              TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, l_seqBatch6);
            }
            if (l_intLoopCounterBatch == 7)
            {
              SeqCopySequence(l_seqBatch7, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch7);
              TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, l_seqBatch7);
            }
            if (l_intLoopCounterBatch == 8)
            {
              SeqCopySequence(l_seqBatch8, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch8);
              TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, l_seqBatch8);
            }
            if (l_intLoopCounterBatch == 9)
            {
              SeqCopySequence(l_seqBatch9, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch9);
              TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, l_seqBatch9);
            }
            if (l_intLoopCounterBatch == 10)
            {
              SeqCopySequence(l_seqBatch10, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch10);
              TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, l_seqBatch10);
            }
            if (l_intLoopCounterBatch == 11)
            {
              SeqCopySequence(l_seqBatch11, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch11);
              TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, l_seqBatch11);
            }
            if (l_intLoopCounterBatch == 12)
            {
              SeqCopySequence(l_seqBatch12, l_seqIntermediateSequencePerBatch);
              o_arrSeqMagneticStandPositionBatchwiseSorted.AddAsLast(l_seqBatch12);
              TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, l_seqBatch12);
            }
          }
        }
        i_seqMagneticStandPosition.SetCurrentPosition(1);
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Number batches calculated : "), o_intNumberOfCalculatedBatchesToBeProcessed);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_TranslateVectorCustomDialogsErrorCodes( variable i_intBindReturnValue ) void {
    private variable l_blnSkipDialog;
    private variable l_strErrorMessage;
    private variable l_intBindReturnValue;
    if (i_intBindReturnValue >= ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Bind return value of current Vector custom dialog : "), i_intBindReturnValue);
      if (i_intBindReturnValue == ASWGLOBAL::BOOL::FALSE)
      {
        l_blnSkipDialog = ASWGLOBAL::BOOL::TRUE;
        l_strErrorMessage = Translate("Command did not end successfully ");
      }
      else
      {
        l_blnSkipDialog = ASWGLOBAL::BOOL::FALSE;
      }
      if (i_intBindReturnValue == -1)
      {
        l_strErrorMessage = Translate("Sizes of initialization arrays are inhomogeneous. Hint : Check your arrays (sizes have to be equal). ");
      }
      if (i_intBindReturnValue == -2)
      {
        l_strErrorMessage = Translate("Data range / type. Hint : Used range or range in combination with data type is invalid.");
      }
      if (i_intBindReturnValue == -5)
      {
        l_strErrorMessage = Translate("IconSet Directory. Hint : Make sure that the directory named “ASWIconSet” exists inside the directory of ASWStandardDialogs library.");
      }
      if (i_intBindReturnValue == -8)
      {
        l_strErrorMessage = Translate("Dialog has been closed through timeout. Hint : This may or may not be an error, depending on the programmer’s intention. Clicking on a dialog interrupts timer and thus does not lead to a error.");
      }
      if (i_intBindReturnValue == -9)
      {
        l_strErrorMessage = Translate("The dialog was not . Hint : Do not use shortcuts to close the dialog, use buttons from the dialog.");
      }
      if (i_intBindReturnValue == -10)
      {
        l_strErrorMessage = Translate("Library is not initialized. Hint : Initialize library before any other function is called.");
      }
      if (i_intBindReturnValue == -11)
      {
        l_strErrorMessage = Translate("Bad Parameter. Hint : See trace for more information about which parameter caused the error. Adjust the input parameter accordingly.");
      }
      if (i_intBindReturnValue == -1000)
      {
        l_strErrorMessage = Translate("A COM error has occured. Hint : Please ensure that the com library HamiltonASWGUI.Dialogs.dll is registered.");
      }
      if (i_intBindReturnValue == -1001)
      {
        l_strErrorMessage = Translate("A COM error has occured. Hint : You cannot execute more dialogs at the same time than defined in the HSL library (default is dialog at a time).");
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Error message of Vector custom dialog library : "), l_strErrorMessage);
      if (l_blnSkipDialog == ASWGLOBAL::BOOL::FALSE)
      {
        l_intBindReturnValue = VectorCustomDialogs::MessageDialog(Translate("Error message of Vector Custom Dialogs. OK is trying to continue the run ignoring the error - CANCEL will abort the run"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 60, l_strErrorMessage);
        if (l_intBindReturnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
        }
      }
    }
  }

  function Sequence_DefineStacks( device & ML_STAR, sequence i_seqOriginalInputLabware, variable i_intRequestedNumberOfUnitsPerStack, variable i_intMaximumNumberOfUnitsPerStackAllowed, sequence & o_trpStackDescending, sequence & o_trpStackAscending ) variable {
    private variable l_strRackLabwareID;
    private variable l_fltZ;
    private variable l_strRackTemplateSiteID;
    private variable l_strRackTemplateID;
    private variable l_fltR;
    private variable l_strRackConfigFile;
    private variable l_fltX;
    private variable l_fltY;
    private variable l_varReturn;
    private variable l_strRackLabwareID_Delete;
    private variable l_strPositionID;
    private variable l_intRetVal;
    private variable loopCounter1;
    private variable l_intSize;
    private sequence l_seqDefaultSequence;
    private variable l_arrStackedLabware[];
    private variable l_arrVisibility[];
    private variable l_intReturnValueDialog;
    private variable l_strComment;
    { sequence __temp; o_trpStackDescending = __temp; }
    { sequence __temp; o_trpStackAscending = __temp; }
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqOriginalInputLabware);
    l_strRackLabwareID = SeqGetLabwareId(i_seqOriginalInputLabware);
    LPQ::LABWARE_GetConfigFile(ML_STAR, i_seqOriginalInputLabware, l_strRackConfigFile);
    LPQ::LABWARE_GetCarrierAndSiteID(ML_STAR, i_seqOriginalInputLabware, l_strRackTemplateID, l_strRackTemplateSiteID);
    HSLLabwrAccess::AbsolutePositionValuesGetForLabwareID(ML_STAR, l_strRackLabwareID, l_fltX, l_fltY, l_fltZ, l_fltR);
    l_strRackLabwareID_Delete = l_strRackLabwareID + Translate("_Delete");
    LPQ::ADJUST_ChangeLabwareID(ML_STAR, l_strRackLabwareID, l_strRackLabwareID_Delete);
    l_varReturn = DevRemoveLabware(ML_STAR, l_strRackLabwareID_Delete);
    if (i_intRequestedNumberOfUnitsPerStack <= 0)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (i_intMaximumNumberOfUnitsPerStackAllowed < i_intRequestedNumberOfUnitsPerStack)
    {
      l_intReturnValueDialog = VectorCustomDialogs::MessageDialog(Translate("Stack definition wrong input detected."), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 9999, Translate("The requested units per stack exceeds the maximum allowed units per stack. Press OK to reduce the items to the max supported units or CANCEL to abort the run."));
      if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
      {
        i_intRequestedNumberOfUnitsPerStack = i_intMaximumNumberOfUnitsPerStackAllowed;
      }
      else
      {
        abort;
      }
    }
    LPQ::ADJUST_StackCreateAtTemplateSite(ML_STAR, l_strRackConfigFile, l_strRackLabwareID, l_strRackTemplateID, l_strRackTemplateSiteID, i_intRequestedNumberOfUnitsPerStack, 0, ASWGLOBAL::BOOL::FALSE, l_arrStackedLabware);
    l_intSize=l_arrStackedLabware.GetSize();
    l_arrVisibility.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < l_intSize;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_arrVisibility.AddAsLast(1);
      }
    }
    DeckVisualize::UpdateLoadedLabware(ML_STAR, l_arrStackedLabware, l_arrVisibility, Translate(""));
    LPQ::ADJUST_SetAbsolutePositionForLabwareID(ML_STAR, l_strRackLabwareID, l_fltX, l_fltY, l_fltZ, 0);
    {
      for(loopCounter1 = 0; loopCounter1 < l_intSize;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_intRetVal = HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, l_arrStackedLabware.ElementAt( loopCounter1 -1), HSLLabwrAccess::Enum::Sorting::ByXAscending, l_seqDefaultSequence);
        if (l_intRetVal == ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Return value get default sequence for labware ID : "), l_intRetVal);
          MECC::TraceComment(Translate("You might to install the Labware access library first"));
          abort;
        }
        l_intRetVal = HSLLabwrAccess::SortSequenceByColumn2(ML_STAR, HSLLabwrAccess::Enum::Sorting::ByXAscending, HSLLabwrAccess::Enum::Sorting::ByXDescending, l_seqDefaultSequence, l_seqDefaultSequence);
        if (l_intRetVal == ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Return value - Sort Sequence by column two : "), l_intRetVal);
          MECC::TraceComment(Translate("You might to install the Labware access library first"));
          abort;
        }
        l_seqDefaultSequence.SetCurrentPosition(1);
        l_strPositionID = SeqGetPositionId(l_seqDefaultSequence);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strPositionID : "), l_strPositionID);
        SeqAdd(o_trpStackDescending, l_arrStackedLabware.ElementAt( loopCounter1 -1), l_strPositionID);
      }
    }
    o_trpStackDescending.SetCurrentPosition(1);
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("l_arrStackedLabware"), l_arrStackedLabware);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, o_trpStackDescending);
    TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_RELEASE, o_trpStackDescending, ASWGLOBAL::BOOL::FALSE);
    HSLLabwrAccess::SortSequenceByColumn1(ML_STAR, HSLLabwrAccess::Enum::Sorting::ByZAscending, o_trpStackDescending, o_trpStackAscending);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, o_trpStackAscending);
    TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_RELEASE, o_trpStackAscending, ASWGLOBAL::BOOL::FALSE);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Read_InputWorklist_ExcelOrCSVFormat( variable i_strInputWorklist, variable & o_intNumberOfSamples, variable & o_intIndexesUsedSetting, variable & o_arrIndex1SeqPositions[], variable & o_arrIndex1IDs[], variable & o_arrIndex2SeqPositions[], variable & o_arrIndex2IDs[], variable & o_arrSamplePlatePositionID[], variable & o_arrSampleIDs[], variable & o_strIndexLabwareFormat ) variable {
    private variable l_fileInputWkl_Sample_ID;
    private variable l_intReturnFromArray;
    private variable l_intSizeArrIndex1Positions;
    private variable l_intCountRows;
    private variable l_intSizeArrIndex2Positions;
    private variable l_intReturnDisplayDialog;
    private variable l_fileInputWkl_Index1_Pos;
    private variable l_fileInputWkl_Index2_ID;
    private variable l_intCountWorkListLinesTrace;
    private variable l_fileInputWkl_Index2_Pos;
    private variable l_fileInputWkl_Index1_ID;
    private variable l_fileInputWkl_Sample_Position;
    private variable l_strCoordinate;
    private variable l_blnPositionFound;
    private variable l_strFileTypeExtension;
    private variable l_intCountColumns;
    private variable l_intCountWorkListLines;
    private variable l_strDisplayTextToStatusWindow;
    private file l_hdlFileInputWorkList;
    private variable l_arr_strCoordinateLetter[];
    private variable l_arr_strCoordinates[];
    private variable l_strEmptyString;
    private variable l_strInformationToUpdateReportList;
    private file l_hdlARWReportFile;
    private variable l_strCurrentTime;
    private variable l_strComment;
    private variable l_strMessage;
    private variable l_blnFileReadSuccess;
    private variable l_fileInputWkl_Sample_Type;
    private variable o_arrSampleType[];
    o_intNumberOfSamples = 0;
    o_intIndexesUsedSetting = 0;
    o_arrIndex1SeqPositions.SetSize( 0);
    o_arrIndex1IDs.SetSize( 0);
    o_arrIndex2SeqPositions.SetSize( 0);
    o_arrIndex2IDs.SetSize( 0);
    o_arrSamplePlatePositionID.SetSize( 0);
    o_arrSampleIDs.SetSize( 0);
    o_strIndexLabwareFormat = 0;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strFileTypeExtension = HSLExtensions::File::GetFileExtension(i_strInputWorklist);
    l_strDisplayTextToStatusWindow = StrConcat2(Translate("Read input worklist :\n "), i_strInputWorklist);
    l_intReturnDisplayDialog = VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    l_strEmptyString = Translate("");
    l_strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    onerror goto errLabel_4 ;
    err.Clear();
    l_hdlARWReportFile.AddField("Date", l_strInformationToUpdateReportList, hslString, 255);
    l_hdlARWReportFile.AddField("Time", l_strCurrentTime, hslString, 255);
    l_hdlARWReportFile.AddField("LabID Source", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("PosID Source", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("Transfer Volume", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("LabID Target", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("PosID Target", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("Barcode", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("Transport information", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("Aspiration information", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("Dispense information", l_strEmptyString, hslString, 255);
    if( 0 == l_hdlARWReportFile.Open(t_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
    }
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      VectorCustomDialogs::MessageDialog(Translate("File handling warning"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("No data could be written or updated into the selected report file."));
      return (ASWGLOBAL::BOOL::FALSE);
    }   /* end if from skip handler if no error */
    if (l_strFileTypeExtension == "csv")
    {
      onerror goto errLabel_5 ;
      err.Clear();
      l_hdlFileInputWorkList.AddField("Sample_ID", l_fileInputWkl_Sample_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Sample_Position", l_fileInputWkl_Sample_Position, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index1_ID", l_fileInputWkl_Index1_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index1_Pos", l_fileInputWkl_Index1_Pos, hslString, 255);
      l_hdlFileInputWorkList.SetDelimiter(";");
      if( 0 == l_hdlFileInputWorkList.Open(i_strInputWorklist, hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strInputWorklist, "HxMetEdCompCmd");
      }
      {
        l_intCountWorkListLines = 0;
        while (
           (l_hdlFileInputWorkList.Eof() == 0)
        )
        {
          l_intCountWorkListLines = l_intCountWorkListLines + 1;
          l_intCountWorkListLinesTrace = l_intCountWorkListLines;
          if( 0 == l_hdlFileInputWorkList.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if (l_fileInputWkl_Sample_Position != "")
          {
            o_arrSampleIDs.AddAsLast(l_fileInputWkl_Sample_ID);
            o_arrSamplePlatePositionID.AddAsLast(l_fileInputWkl_Sample_Position);
            o_arrIndex1IDs.AddAsLast(l_fileInputWkl_Index1_ID);
            o_arrIndex1SeqPositions.AddAsLast(l_fileInputWkl_Index1_Pos);
            l_strInformationToUpdateReportList = StrConcat12(Translate("Input worklist data - Sample ID : "), l_fileInputWkl_Sample_ID, Translate(" on position "), l_fileInputWkl_Sample_Position, Translate(" combined with  index 1 ID "), l_fileInputWkl_Index1_ID, Translate(" on position "), l_fileInputWkl_Index1_Pos, Translate(""), Translate(""), Translate(""), Translate(""));
            if( 0 == l_hdlARWReportFile.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
      }
      TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("Indexes detected: "), Translate("Index 1 only."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      l_blnFileReadSuccess = ASWGLOBAL::BOOL::TRUE;
      errLabel_5 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        if( 0 != l_hdlFileInputWorkList.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_hdlFileInputWorkList.RemoveFields();
        l_blnFileReadSuccess = ASWGLOBAL::BOOL::FALSE;
      }   /* end if from skip handler if no error */
    }
    if (l_strFileTypeExtension == "xls")
    {
      onerror goto errLabel_6 ;
      err.Clear();
      l_hdlFileInputWorkList.AddField("Sample_ID", l_fileInputWkl_Sample_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Sample_Position", l_fileInputWkl_Sample_Position, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index1_ID", l_fileInputWkl_Index1_ID, hslString, 255);
      l_hdlFileInputWorkList.AddField("Index1_Pos", l_fileInputWkl_Index1_Pos, hslString, 255);
      if( 0 == l_hdlFileInputWorkList.Open(i_strInputWorklist + " " + "Sheet1$", hslRead, "Select * from [Sheet1$] where [Sample_Position] is not null") )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strInputWorklist, "HxMetEdCompCmd");
      }
      {
        l_intCountWorkListLines = 0;
        while (
           (l_hdlFileInputWorkList.Eof() == 0)
        )
        {
          l_intCountWorkListLines = l_intCountWorkListLines + 1;
          l_intCountWorkListLinesTrace = l_intCountWorkListLines;
          if( 0 == l_hdlFileInputWorkList.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if (l_fileInputWkl_Sample_Position != "")
          {
            o_arrSampleIDs.AddAsLast(l_fileInputWkl_Sample_ID);
            o_arrSamplePlatePositionID.AddAsLast(l_fileInputWkl_Sample_Position);
            o_arrIndex1IDs.AddAsLast(l_fileInputWkl_Index1_ID);
            o_arrIndex1SeqPositions.AddAsLast(l_fileInputWkl_Index1_Pos);
            l_strInformationToUpdateReportList = StrConcat12(Translate("Input worklist data - Sample ID : "), l_fileInputWkl_Sample_ID, Translate(" on position "), l_fileInputWkl_Sample_Position, Translate(" combined with  index 1 ID "), l_fileInputWkl_Index1_ID, Translate(" on position "), l_fileInputWkl_Index1_Pos, Translate(""), Translate(""), Translate(""), Translate(""));
            if( 0 == l_hdlARWReportFile.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
      }
      TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("Indexes detected: "), Translate("Index 1 only."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      l_blnFileReadSuccess = ASWGLOBAL::BOOL::TRUE;
      errLabel_6 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        if( 0 != l_hdlFileInputWorkList.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_hdlFileInputWorkList.RemoveFields();
        l_blnFileReadSuccess = ASWGLOBAL::BOOL::FALSE;
      }   /* end if from skip handler if no error */
    }
    if (l_blnFileReadSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      if (l_strFileTypeExtension == "csv")
      {
        onerror goto errLabel_7 ;
        err.Clear();
        l_hdlFileInputWorkList.AddField("Sample_ID", l_fileInputWkl_Sample_ID, hslString, 255);
        l_hdlFileInputWorkList.AddField("Sample_Type", l_fileInputWkl_Sample_Type, hslString, 255);
        l_hdlFileInputWorkList.AddField("Sample_Position", l_fileInputWkl_Sample_Position, hslString, 255);
        l_hdlFileInputWorkList.AddField("Index1_ID", l_fileInputWkl_Index1_ID, hslString, 255);
        l_hdlFileInputWorkList.AddField("Index1_Pos", l_fileInputWkl_Index1_Pos, hslString, 255);
        l_hdlFileInputWorkList.AddField("Index2_ID", l_fileInputWkl_Index2_ID, hslString, 255);
        l_hdlFileInputWorkList.AddField("Index2_Pos", l_fileInputWkl_Index2_Pos, hslString, 255);
        l_hdlFileInputWorkList.SetDelimiter(";");
        if( 0 == l_hdlFileInputWorkList.Open(i_strInputWorklist, hslAppend) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strInputWorklist, "HxMetEdCompCmd");
        }
        {
          l_intCountWorkListLines = 0;
          while (
             (l_hdlFileInputWorkList.Eof() == 0)
          )
          {
            l_intCountWorkListLines = l_intCountWorkListLines + 1;
            l_intCountWorkListLinesTrace = l_intCountWorkListLines;
            if( 0 == l_hdlFileInputWorkList.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if (l_fileInputWkl_Sample_Position != "")
            {
              o_arrSampleIDs.AddAsLast(l_fileInputWkl_Sample_ID);
              o_arrSampleType.AddAsLast(l_fileInputWkl_Sample_Type);
              o_arrSamplePlatePositionID.AddAsLast(l_fileInputWkl_Sample_Position);
              o_arrIndex1IDs.AddAsLast(l_fileInputWkl_Index1_ID);
              o_arrIndex1SeqPositions.AddAsLast(l_fileInputWkl_Index1_Pos);
              o_arrIndex2IDs.AddAsLast(l_fileInputWkl_Index2_ID);
              o_arrIndex2SeqPositions.AddAsLast(l_fileInputWkl_Index2_Pos);
              l_strInformationToUpdateReportList = StrConcat12(Translate("Input worklist data - Sample ID : "), l_fileInputWkl_Sample_ID, Translate(" on position "), l_fileInputWkl_Sample_Position, Translate(" combined with  index 1 ID "), l_fileInputWkl_Index1_ID, Translate(" on position "), l_fileInputWkl_Index1_Pos, Translate(" and index 2 ID "), l_fileInputWkl_Index2_ID, Translate(" on position "), l_fileInputWkl_Index2_Pos);
              if( 0 == l_hdlARWReportFile.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
        }
        TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("Indexes detected: "), Translate("Index 1 and Index 2."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        l_blnFileReadSuccess = ASWGLOBAL::BOOL::TRUE;
        errLabel_7 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          if( 0 != l_hdlFileInputWorkList.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_hdlFileInputWorkList.RemoveFields();
          l_blnFileReadSuccess = ASWGLOBAL::BOOL::FALSE;
        }   /* end if from skip handler if no error */
      }
      if (l_strFileTypeExtension == "xls")
      {
        onerror goto errLabel_8 ;
        err.Clear();
        l_hdlFileInputWorkList.AddField("Sample_ID", l_fileInputWkl_Sample_ID, hslString, 255);
        l_hdlFileInputWorkList.AddField("Sample_Type", l_fileInputWkl_Sample_Type, hslString, 255);
        l_hdlFileInputWorkList.AddField("Sample_Position", l_fileInputWkl_Sample_Position, hslString, 255);
        l_hdlFileInputWorkList.AddField("Index1_ID", l_fileInputWkl_Index1_ID, hslString, 255);
        l_hdlFileInputWorkList.AddField("Index1_Pos", l_fileInputWkl_Index1_Pos, hslString, 255);
        l_hdlFileInputWorkList.AddField("Index2_ID", l_fileInputWkl_Index2_ID, hslString, 255);
        l_hdlFileInputWorkList.AddField("Index2_Pos", l_fileInputWkl_Index2_Pos, hslString, 255);
        if( 0 == l_hdlFileInputWorkList.Open(i_strInputWorklist + " " + "Sheet1$", hslRead, "Select * from [Sheet1$] where [Sample_Position] is not null") )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_strInputWorklist, "HxMetEdCompCmd");
        }
        {
          l_intCountWorkListLines = 0;
          while (
             (l_hdlFileInputWorkList.Eof() == 0)
          )
          {
            l_intCountWorkListLines = l_intCountWorkListLines + 1;
            l_intCountWorkListLinesTrace = l_intCountWorkListLines;
            if( 0 == l_hdlFileInputWorkList.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if (l_fileInputWkl_Sample_Position != "")
            {
              o_arrSampleIDs.AddAsLast(l_fileInputWkl_Sample_ID);
              o_arrSampleType.AddAsLast(l_fileInputWkl_Sample_Type);
              o_arrSamplePlatePositionID.AddAsLast(l_fileInputWkl_Sample_Position);
              o_arrIndex1IDs.AddAsLast(l_fileInputWkl_Index1_ID);
              o_arrIndex1SeqPositions.AddAsLast(l_fileInputWkl_Index1_Pos);
              o_arrIndex2IDs.AddAsLast(l_fileInputWkl_Index2_ID);
              o_arrIndex2SeqPositions.AddAsLast(l_fileInputWkl_Index2_Pos);
              l_strInformationToUpdateReportList = StrConcat12(Translate("Input worklist data - Sample ID : "), l_fileInputWkl_Sample_ID, Translate(" on position "), l_fileInputWkl_Sample_Position, Translate(" combined with  index 1 ID "), l_fileInputWkl_Index1_ID, Translate(" on position "), l_fileInputWkl_Index1_Pos, Translate(" and index 2 ID "), l_fileInputWkl_Index2_ID, Translate(" on position "), l_fileInputWkl_Index2_Pos);
              if( 0 == l_hdlARWReportFile.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
        }
        TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("Indexes detected: "), Translate("Index 1 and Index 2."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        l_blnFileReadSuccess = ASWGLOBAL::BOOL::TRUE;
        errLabel_8 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          if( 0 != l_hdlFileInputWorkList.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_hdlFileInputWorkList.RemoveFields();
          l_blnFileReadSuccess = ASWGLOBAL::BOOL::FALSE;
        }   /* end if from skip handler if no error */
      }
    }
    if (l_blnFileReadSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      VectorCustomDialogs::MessageDialog(Translate("File handling warning"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("No data could be read from the selected input worklist file."));
      Reportfile_UpdateData(Translate("No data could be read from the selected input worklist file."), ASWGLOBAL::BOOL::TRUE);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if( 0 != l_hdlFileInputWorkList.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlFileInputWorkList.RemoveFields();
    if( 0 != l_hdlARWReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlARWReportFile.RemoveFields();
    l_strMessage = StrConcat2(Translate("Data successfully read from the selected input worklist file : \n"), i_strInputWorklist);
    Reportfile_UpdateData(l_strMessage, ASWGLOBAL::BOOL::TRUE);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Records in worklist file: "), l_intCountWorkListLinesTrace);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Sample IDs : "), o_arrSampleIDs);
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("Sample Type : "), Translate("Sample Position IDs based on input worklist : "), o_arrSampleType, o_arrSamplePlatePositionID);
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("Index 1 IDs : "), Translate("Index Position IDs based on input worklist : "), o_arrIndex1IDs, o_arrIndex1SeqPositions);
    l_intSizeArrIndex2Positions=o_arrIndex2SeqPositions.GetSize();
    if (l_intSizeArrIndex2Positions > 0)
    {
      TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("Index 2 IDs : "), Translate("Index Position IDs based on input worklist : "), o_arrIndex2IDs, o_arrIndex2SeqPositions);
    }
    l_arr_strCoordinateLetter.SetSize(0);
    l_arr_strCoordinateLetter.AddAsLast(Translate("A"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("B"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("C"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("D"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("E"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("F"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("G"));
    l_arr_strCoordinateLetter.AddAsLast(Translate("H"));
    l_arr_strCoordinates.SetSize(0);
    {
      for(l_intCountColumns = 0; l_intCountColumns < 12;)
      {
        l_intCountColumns = l_intCountColumns + 1;
        {
          for(l_intCountRows = 0; l_intCountRows < 8;)
          {
            l_intCountRows = l_intCountRows + 1;
            l_strCoordinate = StrConcat2(l_arr_strCoordinateLetter.ElementAt( l_intCountRows -1), l_intCountColumns);
            l_arr_strCoordinates.AddAsLast(l_strCoordinate);
          }
        }
      }
    }
    l_intReturnFromArray = ARRAYTOOLS::Lookup(l_arr_strCoordinates, o_arrIndex1SeqPositions.ElementAt( 1 -1));
    if (l_intReturnFromArray != 0)
    {
      l_blnPositionFound = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      l_blnPositionFound = ASWGLOBAL::BOOL::FALSE;
    }
    if (l_blnPositionFound == ASWGLOBAL::BOOL::TRUE)
    {
      o_strIndexLabwareFormat = Translate("plate");
    }
    else
    {
      o_strIndexLabwareFormat = Translate("tube");
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Format of labware used  for indexes : "), o_strIndexLabwareFormat);
    o_intNumberOfSamples=o_arrSampleIDs.GetSize();
    t_intNumberOfSamples = o_intNumberOfSamples;
    l_intSizeArrIndex1Positions=o_arrIndex1SeqPositions.GetSize();
    l_intSizeArrIndex2Positions=o_arrIndex2SeqPositions.GetSize();
    if (l_intSizeArrIndex2Positions != 0)
    {
      o_intIndexesUsedSetting = 2;
    }
    else
    {
      if (l_intSizeArrIndex1Positions == 0)
      {
        o_intIndexesUsedSetting = 0;
      }
      else
      {
        o_intIndexesUsedSetting = 1;
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Indexes used (0= No indexes; 1= Index 1 only; 2= Index 2 used) : "), o_intIndexesUsedSetting);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _CheckSystemConnected( device & ML_STAR, variable & o_intPlatformType, variable & o_strDeviceViewName ) variable {
    private variable l_strDeviceName;
    private variable l_strComment;
    o_intPlatformType = 0;
    o_strDeviceViewName = 0;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strDeviceName = DevGetInstrumentName(ML_STAR);
    o_strDeviceViewName = DevGetInstrumentViewName(ML_STAR);
    o_intPlatformType = 0;
    InstrumentTypeHelper::GetStarType(o_intPlatformType);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("l_strDeviceName : "), l_strDeviceName, Translate(" - o_strDeviceViewName : "), o_strDeviceViewName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(" Platform type 0 = STARline; 1 = STARVline"), o_intPlatformType);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function InterpreteLabwareID( variable & o_strTypeOfLabware, sequence i_seqToBeAnalyzed, device & ML_STAR ) variable {
    private variable l_strComment;
    private variable l_str_LabID;
    private variable l_bool_ConnectedContainer;
    o_strTypeOfLabware = 0;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_str_LabID = SeqGetLabwareId(i_seqToBeAnalyzed);
    l_bool_ConnectedContainer = ASWGLOBAL::BOOL::FALSE;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = ML_STAR.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(l_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      //objRack4.GetRackData(objRackDataParams);
      //l_bool_ConnectedContainer = objRackDataParams.Item1("ConnectedCtr");
      l_bool_ConnectedContainer = objRack4.ConnectedCtr();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    if (l_bool_ConnectedContainer == ASWGLOBAL::BOOL::TRUE)
    {
      o_strTypeOfLabware = Translate("trough");
    }
    else
    {
      o_strTypeOfLabware = Translate("plate");
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("o_strTypeOfLabware : "), o_strTypeOfLabware);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Timer_Incubation( timer & i_strIncubationTimerName, variable i_intTime, variable i_intTimerMode ) variable {
    private variable l_strComment;
    private variable l_fltElapsedTime;
    private variable l_intTime;
    private variable l_strInformationToBeUpdated;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    if (t_blnUseShortTimers == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTime = 3;
      l_strInformationToBeUpdated = StrConcat8(Translate("Incubation performed "), Translate(""), Translate(". Duration : "), l_intTime, Translate(" seconds"), Translate("."), Translate("  Using short timer with the setting for i_blnUseShortTimers in Init"), Translate(""));
    }
    else
    {
      l_intTime = MthFloor(i_intTime);
      l_strInformationToBeUpdated = StrConcat8(Translate("Incubation performed "), Translate(""), Translate(". Duration : "), l_intTime, Translate(" seconds"), Translate("."), Translate(""), Translate(""));
    }
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_08(TRACE_LEVEL_RELEASE, Translate("Time to be perfomed:  "), i_intTime, Translate("Timer mode (1 = START and WAIT; 2 = START only; 3 = RETRIEVE elapsed time and WAIT): "), i_intTimerMode, Translate(". "), l_strInformationToBeUpdated, Translate(""), Translate(""));
      if (i_intTimerMode == 1)
      {
        i_strIncubationTimerName.SetTimerViewName("");
        if( 0 == i_strIncubationTimerName.SetTimer(l_intTime) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == i_strIncubationTimerName.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Reportfile_UpdateData(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
        l_fltElapsedTime = i_strIncubationTimerName.GetElapsedTime();
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Timer mode START and WAIT - elapsed time : "), l_fltElapsedTime);
      }
      if (i_intTimerMode == 2)
      {
        i_strIncubationTimerName.SetTimerViewName("");
        if( 0 == i_strIncubationTimerName.SetTimer(l_intTime) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      if (i_intTimerMode == 3)
      {
        if( 0 == i_strIncubationTimerName.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Reportfile_UpdateData(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
        l_fltElapsedTime = i_strIncubationTimerName.GetElapsedTime();
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Timer mode RETRIEVE elapsed time and WAIT - elapsed time : "), l_fltElapsedTime);
      }
    }
    else
    {
      TRACELEVEL::Trace_08(TRACE_LEVEL_RELEASE, Translate("SIMULATION MODE - timer skipped : Time to be perfomed:  "), l_intTime, Translate("Timer mode (1 = START and WAIT; 2 = START only; 3 = RETRIEVE elapsed time and WAIT): "), i_intTimerMode, Translate(". "), l_strInformationToBeUpdated, Translate(""), Translate(""));
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _Retrieve_FileFolderAndNames( variable & o_strARWPlatformName, variable & o_strKitProvider, variable & o_strKitName, variable & o_strMethodName, variable & o_strMethodDirectory ) variable {
    private variable l_strMethodPath;
    private variable l_strFindMethods;
    private variable l_strComment;
    o_strARWPlatformName = 0;
    o_strKitProvider = 0;
    o_strKitName = 0;
    o_strMethodName = 0;
    o_strMethodDirectory = 0;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strMethodPath = Translate("");
    l_strMethodPath = GetMethodFileName();
    o_strMethodName = t_strMethodName;
    l_strFindMethods = StrFind(l_strMethodPath, Translate("Methods"));
    l_strMethodPath = StrLeft(l_strMethodPath, l_strFindMethods);
    o_strKitName = HSLExtensions::File::GetFileName(l_strMethodPath);
    l_strMethodPath = HSLExtensions::File::GetDirectoryName(l_strMethodPath);
    o_strKitProvider = HSLExtensions::File::GetFileName(l_strMethodPath);
    l_strMethodPath = HSLExtensions::File::GetDirectoryName(l_strMethodPath);
    o_strARWPlatformName = HSLExtensions::File::GetFileName(l_strMethodPath);
    o_strMethodDirectory = StrConcat12(l_strMethodPath, Translate("\\"), o_strKitProvider, Translate("\\"), o_strKitName, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Start_Function( variable & io_strFunctionName, variable i_blnUpdateReportFile ) variable {
    private variable l_strFunctionNameStatusWindow;
    private variable l_strFunctionNameExtracted;
    private variable l_intBindReturnValue;
    private variable l_intLengthOfFunctionName;
    private variable l_intLengthOfFunctionNameWithoutMethod;
    private variable l_strFunctionName;
    l_strFunctionName = io_strFunctionName;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strMethodName, Translate(""));
    l_intLengthOfFunctionName = StrGetLength(l_strFunctionName);
    l_intLengthOfFunctionNameWithoutMethod = l_intLengthOfFunctionName - 9;
    l_strFunctionNameExtracted = StrRight(l_strFunctionName, l_intLengthOfFunctionNameWithoutMethod);
    if (i_blnUpdateReportFile == ASWGLOBAL::BOOL::TRUE)
    {
      io_strFunctionName = l_strFunctionNameExtracted;
      l_strFunctionNameStatusWindow = StrConcat4(Translate("________________ "), l_strFunctionNameExtracted, Translate(" ________________"), Translate(""));
      Reportfile_UpdateData(l_strFunctionNameStatusWindow, ASWGLOBAL::BOOL::FALSE);
      l_intBindReturnValue = VectorCustomDialogs::SetStatusText(l_strFunctionNameStatusWindow);
      _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function CalculateTipConsumption( variable i_intNumberOfPositionIDs, variable i_intNumberOfTransfersChannels, variable i_intNumberOfExtraTips, variable i_intNumberOfTransfersMPH, variable & o_intScheduledTipConsumption ) variable {
    private variable l_strComment;
    private variable l_intSampleNumberModulo8;
    private variable l_intScheduledTipConsumptionChannels;
    private variable l_intScheduledTipConsumptionMPH;
    o_intScheduledTipConsumption = 0;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_intScheduledTipConsumptionChannels = i_intNumberOfPositionIDs * i_intNumberOfTransfersChannels;
    l_intScheduledTipConsumptionChannels = l_intScheduledTipConsumptionChannels + i_intNumberOfExtraTips;
    TRACELEVEL::Trace_08(TRACE_LEVEL_RELEASE, Translate("Number of PositionIDs "), i_intNumberOfPositionIDs, Translate(", number of transfers for channels "), i_intNumberOfTransfersChannels, Translate(", number of extra tips "), i_intNumberOfExtraTips, Translate(". Scheduled tip consumption for channels "), l_intScheduledTipConsumptionChannels);
    l_intSampleNumberModulo8 = i_intNumberOfPositionIDs % 8;
    if (l_intSampleNumberModulo8 == 0)
    {
      l_intScheduledTipConsumptionMPH = i_intNumberOfPositionIDs;
    }
    else
    {
      l_intScheduledTipConsumptionMPH = i_intNumberOfPositionIDs / (8 * 1.0);
      l_intScheduledTipConsumptionMPH = MthCeiling(l_intScheduledTipConsumptionMPH);
      l_intScheduledTipConsumptionMPH = l_intScheduledTipConsumptionMPH * 8;
    }
    l_intScheduledTipConsumptionMPH = i_intNumberOfTransfersMPH * l_intScheduledTipConsumptionMPH;
    o_intScheduledTipConsumption = l_intScheduledTipConsumptionChannels + l_intScheduledTipConsumptionMPH;
    TRACELEVEL::Trace_08(TRACE_LEVEL_RELEASE, Translate("Number of transfers for MPH "), i_intNumberOfTransfersMPH, Translate(". Scheduled tip consumption for MPH "), l_intScheduledTipConsumptionMPH, Translate(". Scheduled tip consumption total "), o_intScheduledTipConsumption, Translate(""), Translate(""));
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }
} // library namespace
