#pragma once
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLStrLib.hsl"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "HamiltonHeaterShaker3G\\HamiltonHeaterShaker3G.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLExtensions\\Array.hsl"
#include "HSLUtilLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace HAMILTONHEATERSHAKER_CONTROLLER {
  variable t_intTraceLevel;
  variable t_arrIntCurrentHHSNumbers[];
  variable t_strLibraryName;
  variable t_blnInitPerformed;
  variable t_activateIntegratedAbortHandler;
  variable t_strFunctionName;
  variable t_blnSimulationModeON;
  variable t_strLibraryNameWithoutExtension;
  function HHS_CheckTemperature( variable i_intNumberOfConnectedHHS, variable & o_fltTemperature ) variable ;
  function HHS_GetRecordedTemperatureData( variable i_intNumberOfConnectedHHS, variable & o_arrFltRecordedTemperaturData[] ) variable ;
  function HHS_Lock( variable i_intNumberOfConnectedHHS, variable i_blnLock ) variable ;
  function HHS_SetTemperature( variable i_intNumberOfConnectedHHS, variable i_fltTemperature, variable i_blnWaitForTempReached, variable i_blnActivateTemperatureRecording ) variable ;
  function HHS_SetTemperatureAdvanced( variable i_intNumberOfConnectedHHS, variable i_fltTemperature, variable i_blnWaitForTempReached, variable i_blnActivateTemperatureRecording ) variable ;
  function HHS_Shake( variable i_intNumberOfConnectedHHS, variable i_intShakingDirection, variable i_intShakingAcceleration, variable i_intShakingSpeed, variable i_intShakingTime ) variable ;
  function HHS_StopInfinitShaking( variable i_intNumberOfConnectedHHS ) variable ;
  function HHS_Terminate(  ) variable ;
  function Init( variable i_blnSimulationModeON, device & ML_STAR, variable i_intConnectionType, variable i_intNumberOfHHS, variable i_intNumberOfControllerBoxes, variable i_ActivateIntegratedAbortHandler, variable & o_arrIntHHSNumbers[], variable & o_strNameAndVersion ) variable ;
  private function _DATA_AppendStatusWindow( variable i_strMessageToAppend ) void ;
  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void ;
  private function _DATA_ShowListDialog( variable i_strLastErrorMessage, variable i_strTopText, variable i_strBottomText, variable i_strDeviceName ) void ;
  private function _ReportErrorText( variable i_intReturnValue, variable i_intNumberOfConnectedHHS, variable i_strFunctionName ) variable ;
  private function _Version(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function HHS_Shake( variable i_intNumberOfConnectedHHS, variable i_intShakingDirection, variable i_intShakingAcceleration, variable i_intShakingSpeed, variable i_intShakingTime ) variable {
    private variable l_strMessageLastError;
    private variable l_blnReturnValueHHS;
    private variable l_inLastError;
    private variable l_strErrorDescription;
    private variable l_strStatusMessage;
    private variable l_intNumberOfHHSConnected;
    private variable loopCounter1;
    private variable l_strComment;
    private variable l_blnSuccess;
    private variable l_intReturnValue;
    private timer l_hdl_ShakerTimed;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strStatusMessage = StrConcat12(Translate("HHS "), i_intNumberOfConnectedHHS, Translate(" [0 = all shaker] - set to direction "), i_intShakingDirection, Translate(" [0 = Clockwise, 1 = CounterClockwise] ; acceleration :"), i_intShakingAcceleration, Translate(" rps². Speed: "), i_intShakingSpeed, Translate(" rpm and "), i_intShakingTime, Translate(" seconds time [0 = infinit]."), Translate(""));
    _DATA_AppendStatusWindow(l_strStatusMessage);
    if (i_intNumberOfConnectedHHS == 0)
    {
      l_intNumberOfHHSConnected=t_arrIntCurrentHHSNumbers.GetSize();
      {
        for(loopCounter1 = 0; loopCounter1 < l_intNumberOfHHSConnected;)
        {
          loopCounter1 = loopCounter1 + 1;
          l_blnReturnValueHHS = HamiltonHeaterShaker3G::SetShakerParameter(t_arrIntCurrentHHSNumbers.ElementAt( loopCounter1 -1), i_intShakingDirection, i_intShakingAcceleration);
          l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("Set shaker parameter"));
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Set shaker parameter"));
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
      }
    }
    else
    {
      l_blnReturnValueHHS = HamiltonHeaterShaker3G::SetShakerParameter(i_intNumberOfConnectedHHS, i_intShakingDirection, i_intShakingAcceleration);
      l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("Set shaker parameter"));
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Set shaker parameter"));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    if (i_intShakingTime == 0)
    {
      if (i_intNumberOfConnectedHHS == 0)
      {
        l_blnReturnValueHHS = HamiltonHeaterShaker3G::StartAllShaker(i_intShakingSpeed);
        if (l_blnReturnValueHHS == ASWGLOBAL::BOOL::FALSE)
        {
          {
            for(loopCounter1 = 0; loopCounter1 < l_intNumberOfHHSConnected;)
            {
              loopCounter1 = loopCounter1 + 1;
              HamiltonHeaterShaker3G::GetLastDeviceError(t_arrIntCurrentHHSNumbers.ElementAt( loopCounter1 -1), l_inLastError, l_strErrorDescription);
              l_strMessageLastError = StrConcat4(Translate("Error code : "), l_inLastError, Translate(" \n Translated description : "), l_strErrorDescription);
              _DATA_IntegratedAbortHandler(Translate("HHS start all shaker"), l_strMessageLastError);
              TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, l_strMessageLastError);
              return (ASWGLOBAL::BOOL::FALSE);
            }
          }
        }
      }
      else
      {
        l_blnReturnValueHHS = HamiltonHeaterShaker3G::StartShaker(i_intNumberOfConnectedHHS, i_intShakingSpeed);
        l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("Start shaker"));
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Start shaker"));
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    else
    {
      if (i_intNumberOfConnectedHHS == 0)
      {
        l_blnReturnValueHHS = HamiltonHeaterShaker3G::StartAllShaker(i_intShakingSpeed);
        if (l_blnReturnValueHHS == ASWGLOBAL::BOOL::FALSE)
        {
          {
            for(loopCounter1 = 0; loopCounter1 < l_intNumberOfHHSConnected;)
            {
              loopCounter1 = loopCounter1 + 1;
              HamiltonHeaterShaker3G::GetLastDeviceError(t_arrIntCurrentHHSNumbers.ElementAt( loopCounter1 -1), l_inLastError, l_strErrorDescription);
              l_strMessageLastError = StrConcat4(Translate("Error code : "), l_inLastError, Translate(" \n Translated description : "), l_strErrorDescription);
              _DATA_IntegratedAbortHandler(Translate("HHS start all shaker"), l_strMessageLastError);
              TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, l_strMessageLastError);
              return (ASWGLOBAL::BOOL::FALSE);
            }
          }
        }
      }
      else
      {
        l_blnReturnValueHHS = HamiltonHeaterShaker3G::StartShaker(i_intNumberOfConnectedHHS, i_intShakingSpeed);
        l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("Start shaker"));
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Start shaker"));
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
      if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
      {
        l_hdl_ShakerTimed.SetTimerViewName("Shaker timer");
        if( 0 == l_hdl_ShakerTimed.SetTimer(i_intShakingTime) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_intReturnValue = l_hdl_ShakerTimed.WaitTimer(hslTrue, hslTrue);
        if (0 == l_intReturnValue)
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (l_intReturnValue == 3)
        {
          _DATA_AppendStatusWindow(Translate("User stopped timer manually"));
        }
      }
      if (i_intNumberOfConnectedHHS == 0)
      {
        l_intNumberOfHHSConnected=t_arrIntCurrentHHSNumbers.GetSize();
        l_blnReturnValueHHS = HamiltonHeaterShaker3G::StopAllShaker();
        if (l_blnReturnValueHHS == ASWGLOBAL::BOOL::FALSE)
        {
          {
            for(loopCounter1 = 0; loopCounter1 < l_intNumberOfHHSConnected;)
            {
              loopCounter1 = loopCounter1 + 1;
              HamiltonHeaterShaker3G::GetLastDeviceError(t_arrIntCurrentHHSNumbers.ElementAt( loopCounter1 -1), l_inLastError, l_strErrorDescription);
              l_strMessageLastError = StrConcat4(Translate("Error code : "), l_inLastError, Translate(" \n Translated description : "), l_strErrorDescription);
              _DATA_IntegratedAbortHandler(Translate("HHS stop all shaker"), l_strMessageLastError);
              return (ASWGLOBAL::BOOL::FALSE);
            }
          }
        }
      }
      else
      {
        l_blnReturnValueHHS = HamiltonHeaterShaker3G::StopShaker(i_intNumberOfConnectedHHS);
        l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("Stop shaker"));
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Stop shaker"));
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _Version(  ) void {
  }

  private function _DATA_ShowListDialog( variable i_strLastErrorMessage, variable i_strTopText, variable i_strBottomText, variable i_strDeviceName ) void {
    private variable l_strLastError;
    private variable l_strDialogTitle;
    private variable l_intReturnValueDialog;
    private variable l_arrListHHSMessage[];
    l_strDialogTitle = StrConcat2(i_strDeviceName, Translate(" - inferface "));
    l_strLastError = StrConcat2(Translate("TEC error description : "), i_strLastErrorMessage);
    l_arrListHHSMessage.SetSize(0);
    l_arrListHHSMessage.AddAsLast(l_strLastError);
    onerror goto errLabel_1 ;
    err.Clear();
    l_intReturnValueDialog = VectorCustomDialogs::ListDialog(l_strDialogTitle, VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, i_strTopText, i_strBottomText, l_arrListHHSMessage);
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      VectorCustomDialogs::Initialize();
      l_intReturnValueDialog = VectorCustomDialogs::ListDialog(l_strDialogTitle, VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, i_strTopText, i_strBottomText, l_arrListHHSMessage);
    }   /* end if from skip handler if no error */
    if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
    {
      MECC::TraceComment(Translate("************  Method will continue - USER confirmed dialog with OK ************"));
    }
  }

  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void {
    private variable l_strAffectedLibrary;
    private variable l_strAbortMessage;
    private variable l_strFunctionName;
    private variable l_arrListAbortHandlerMessage[];
    private variable l_strComment;
    if (t_activateIntegratedAbortHandler == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strFunctionName = Translate("");
    l_strComment = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, l_strComment);
    VectorCustomDialogs::Initialize();
    l_strAffectedLibrary = StrConcat2(Translate("Affected library :    "), i_strFunctionName);
    l_strAbortMessage = StrConcat2(Translate("Message : "), i_strAbortMessage);
    l_arrListAbortHandlerMessage.SetSize(0);
    l_arrListAbortHandlerMessage.AddAsLast(l_strAffectedLibrary);
    l_arrListAbortHandlerMessage.AddAsLast(l_strAbortMessage);
    VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Internal abort handler activated - error occurred - abort routine started"), Translate("Press OK to Abort the run."), l_arrListAbortHandlerMessage);
    HHS_Terminate();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, i_strAbortMessage);
    abort;
  }

  private function _DATA_AppendStatusWindow( variable i_strMessageToAppend ) void {
    onerror goto errLabel_2 ;
    err.Clear();
    VectorCustomDialogs::AppendStatusText(i_strMessageToAppend);
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      VectorCustomDialogs::Initialize();
      VectorCustomDialogs::ShowStatusDialog(Translate("TEC controller"));
      VectorCustomDialogs::AppendStatusText(i_strMessageToAppend);
    }   /* end if from skip handler if no error */
  }

  function HHS_Terminate(  ) variable {
    private variable l_strComment;
    if (t_blnInitPerformed == ASWGLOBAL::BOOL::FALSE)
    {
      MECC::TraceComment(Translate("This step was introduced to avoid terminating a device without having initialized it in prior.\nThis may happen if a run is aborted and the init step was not called before --> on abort handler might still call terminate command.."));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    _DATA_AppendStatusWindow(Translate("HHS terminate all shaker."));
    HamiltonHeaterShaker3G::Terminate();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Init( variable i_blnSimulationModeON, device & ML_STAR, variable i_intConnectionType, variable i_intNumberOfHHS, variable i_intNumberOfControllerBoxes, variable i_ActivateIntegratedAbortHandler, variable & o_arrIntHHSNumbers[], variable & o_strNameAndVersion ) variable {
    private variable l_blnReturnValueHHS;
    private variable l_strSerialNumberCurrentHHS;
    private variable l_intNumberOfConnectedHHS;
    private variable l_strMessageLastError;
    private variable l_intIndexHHSConnected;
    private variable l_inLastError;
    private variable l_strErrorDescription;
    private variable l_strFirmwareVersionCurrentHHS;
    private variable l_strTemperatureCurrentHHS;
    private variable l_fltTemperatureCurrentHHS;
    private variable l_intStartTimeOut;
    private variable l_fltSecurityRange;
    private variable l_fltToleranceRange;
    private variable l_strStatusMessage;
    private variable l_intCurrentControllBox;
    private variable l_intIndexCounter;
    private variable l_strUSBNodeName;
    private variable o_arrIntCurrentHHSNumbers[];
    private variable l_str_ReturnNameAndVersion;
    private variable l_strControllerVersion;
    private variable l_strComment;
    private variable l_strDescription;
    o_arrIntHHSNumbers.SetSize( 0);
    o_strNameAndVersion = 0;
    t_strLibraryName = Translate("");
    t_strFunctionName = Translate("");
    l_strControllerVersion = Translate("");
    l_str_ReturnNameAndVersion = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    l_strControllerVersion = "0.2.6";
    t_strLibraryNameWithoutExtension = HSLExtensions::File::GetFileNameWithoutExtension(t_strLibraryName);
    o_strNameAndVersion = StrConcat4(t_strLibraryNameWithoutExtension, Translate(" "), l_strControllerVersion, Translate(""));
    l_strDescription = o_strNameAndVersion;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strDescription);
    t_activateIntegratedAbortHandler = i_ActivateIntegratedAbortHandler;
    t_blnSimulationModeON = Util::GetSimulationMode();
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      t_blnSimulationModeON = i_blnSimulationModeON;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("t_blnSimulationModeON : "), t_blnSimulationModeON);
    l_strStatusMessage = StrConcat12(Translate("HHS INIT set to "), i_intNumberOfHHS, Translate(" units. Connection type :"), i_intConnectionType, Translate(" [0 = TCC, 1 = HHS Box, 2 = periphery box]."), Translate(" Number of installed controlling boxes: "), i_intNumberOfControllerBoxes, Translate("."), Translate("\n Simulation mode : "), t_blnSimulationModeON, Translate(""), Translate(""));
    _DATA_AppendStatusWindow(l_strStatusMessage);
    HamiltonHeaterShaker3G::SetSimulation(t_blnSimulationModeON);
    if (i_intConnectionType == HamiltonHeaterShaker3G::ConnectionType::Vantage)
    {
      if (i_intNumberOfControllerBoxes == 0)
      {
        _DATA_IntegratedAbortHandler(Translate("INIT HHS"), Translate("Number of selected controlling boxes may not be 0"));
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("INIT HHS - Number of selected controlling boxes may not be 0"));
        return (ASWGLOBAL::BOOL::FALSE);
      }
      if (i_intNumberOfControllerBoxes > 4)
      {
        _DATA_IntegratedAbortHandler(Translate("INIT HHS"), Translate("Number of selected controlling boxes exeeds the supported numbers. [max 4 peripherie boxes]"));
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("INIT HHS - Number of selected controlling boxes exeeds the supported numbers. [max 4 peripherie boxes]"));
        return (ASWGLOBAL::BOOL::FALSE);
      }
      {
        for(l_intCurrentControllBox = 0; l_intCurrentControllBox < i_intNumberOfControllerBoxes;)
        {
          l_intCurrentControllBox = l_intCurrentControllBox + 1;
          l_strUSBNodeName = StrConcat2(Translate("B"), l_intCurrentControllBox);
          HamiltonHeaterShaker3G::SetPeripheryBoxNodeName(l_strUSBNodeName);
          l_blnReturnValueHHS = HamiltonHeaterShaker3G::InitializeDevices(ML_STAR, i_intConnectionType, i_intNumberOfHHS, o_arrIntCurrentHHSNumbers);
          if (l_blnReturnValueHHS == ASWGLOBAL::BOOL::FALSE)
          {
            HamiltonHeaterShaker3G::GetLastError(l_inLastError, l_strErrorDescription);
            l_strMessageLastError = StrConcat4(Translate("Error code : "), l_inLastError, Translate(" \n Translated description : "), l_strErrorDescription);
            _DATA_IntegratedAbortHandler(Translate("HHS INIT"), l_strMessageLastError);
            TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, l_strMessageLastError);
            return (ASWGLOBAL::BOOL::FALSE);
          }
          o_arrIntHHSNumbers = HSLExtensions::Array::Concat(o_arrIntHHSNumbers, o_arrIntCurrentHHSNumbers);
        }
      }
    }
    l_intIndexCounter = 0;
    if (i_intConnectionType == HamiltonHeaterShaker3G::ConnectionType::Usb)
    {
      if (i_intNumberOfControllerBoxes > 100)
      {
        _DATA_IntegratedAbortHandler(Translate("INIT HHS"), Translate("Number of selected controlling boxes exeeds the supported numbers. [max. 100 electronic boxes]"));
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("INIT HHS - Number of selected controlling boxes exeeds the supported numbers. [max. 100 electronic boxes]"));
        return (ASWGLOBAL::BOOL::FALSE);
      }
      if (i_intNumberOfControllerBoxes == 0)
      {
        _DATA_IntegratedAbortHandler(Translate("INIT HHS"), Translate("Number of selected controlling boxes may not be 0"));
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("INIT HHS - Number of selected controlling boxes may not be 0"));
        return (ASWGLOBAL::BOOL::FALSE);
      }
      l_intCurrentControllBox = 0;
      {
        for(l_intIndexCounter = 0; l_intIndexCounter < i_intNumberOfControllerBoxes;)
        {
          l_intIndexCounter = l_intIndexCounter + 1;
          l_strUSBNodeName = StrConcat2(Translate("0"), l_intCurrentControllBox);
          HamiltonHeaterShaker3G::SetUsbSerialNumber(l_strUSBNodeName);
          l_blnReturnValueHHS = HamiltonHeaterShaker3G::InitializeDevices(ML_STAR, i_intConnectionType, i_intNumberOfHHS, o_arrIntCurrentHHSNumbers);
          if (l_blnReturnValueHHS == ASWGLOBAL::BOOL::FALSE)
          {
            HamiltonHeaterShaker3G::GetLastError(l_inLastError, l_strErrorDescription);
            l_strMessageLastError = StrConcat4(Translate("Error code : "), l_inLastError, Translate(" \n Translated description : "), l_strErrorDescription);
            _DATA_IntegratedAbortHandler(Translate("HHS INIT"), l_strMessageLastError);
            TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, l_strMessageLastError);
            return (ASWGLOBAL::BOOL::FALSE);
          }
          o_arrIntHHSNumbers = HSLExtensions::Array::Concat(o_arrIntHHSNumbers, o_arrIntCurrentHHSNumbers);
          l_intCurrentControllBox = l_intCurrentControllBox + 1;
        }
      }
    }
    if (i_intConnectionType == HamiltonHeaterShaker3G::ConnectionType::Star)
    {
      if (i_intNumberOfHHS > 2)
      {
        l_strMessageLastError = StrConcat4(Translate("Error : "), Translate(" You may connect max 2 devices using the TCC ports of the STARline...If you want to use more devices you may use the HHS electronic box."), Translate(""), Translate(""));
        _DATA_IntegratedAbortHandler(Translate("HHS INIT"), l_strMessageLastError);
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, l_strMessageLastError);
        return (ASWGLOBAL::BOOL::FALSE);
      }
      l_blnReturnValueHHS = HamiltonHeaterShaker3G::InitializeDevices(ML_STAR, i_intConnectionType, i_intNumberOfHHS, o_arrIntCurrentHHSNumbers);
      if (l_blnReturnValueHHS == ASWGLOBAL::BOOL::FALSE)
      {
        HamiltonHeaterShaker3G::GetLastError(l_inLastError, l_strErrorDescription);
        l_strMessageLastError = StrConcat4(Translate("Error code : "), l_inLastError, Translate(" \n Translated description : "), l_strErrorDescription);
        _DATA_IntegratedAbortHandler(Translate("HHS INIT"), l_strMessageLastError);
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, l_strMessageLastError);
        return (ASWGLOBAL::BOOL::FALSE);
      }
      o_arrIntHHSNumbers = HSLExtensions::Array::Concat(o_arrIntHHSNumbers, o_arrIntCurrentHHSNumbers);
    }
    if (t_intTraceLevel == 0)
    {
      HamiltonHeaterShaker3G::SetTraceLevel(TRACE_LEVEL_RELEASE);
      if (i_intConnectionType == 1)
      {
        l_blnReturnValueHHS = HamiltonHeaterShaker3G::SetUSBTrace(ASWGLOBAL::BOOL::FALSE);
        if (l_blnReturnValueHHS == ASWGLOBAL::BOOL::FALSE)
        {
          HamiltonHeaterShaker3G::GetLastError(l_inLastError, l_strErrorDescription);
          l_strMessageLastError = StrConcat4(Translate("Error code : "), l_inLastError, Translate(" \n Translated description : "), l_strErrorDescription);
          _DATA_IntegratedAbortHandler(Translate("HHS INIT"), l_strMessageLastError);
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, l_strMessageLastError);
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    if (t_intTraceLevel == 2)
    {
      if (i_intConnectionType == 1)
      {
        l_blnReturnValueHHS = HamiltonHeaterShaker3G::SetUSBTrace(ASWGLOBAL::BOOL::TRUE);
        if (l_blnReturnValueHHS == ASWGLOBAL::BOOL::FALSE)
        {
          HamiltonHeaterShaker3G::GetLastError(l_inLastError, l_strErrorDescription);
          l_strMessageLastError = StrConcat4(Translate("Error code : "), l_inLastError, Translate(" \n Translated description : "), l_strErrorDescription);
          _DATA_IntegratedAbortHandler(Translate("HHS INIT"), l_strMessageLastError);
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, l_strMessageLastError);
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Number of Heater Shaker devices : "), o_arrIntHHSNumbers);
    l_intNumberOfConnectedHHS=o_arrIntHHSNumbers.GetSize();
    {
      for(l_intIndexHHSConnected = 0; l_intIndexHHSConnected < l_intNumberOfConnectedHHS;)
      {
        l_intIndexHHSConnected = l_intIndexHHSConnected + 1;
        l_blnReturnValueHHS = HamiltonHeaterShaker3G::GetSerialNumber(l_intIndexHHSConnected, l_strSerialNumberCurrentHHS);
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Connected HHS number : "), l_intIndexHHSConnected, Translate(" - Serial number : "), l_strSerialNumberCurrentHHS);
        if (l_blnReturnValueHHS == ASWGLOBAL::BOOL::FALSE)
        {
          HamiltonHeaterShaker3G::GetLastDeviceError(l_intIndexHHSConnected, l_inLastError, l_strErrorDescription);
          l_strMessageLastError = StrConcat4(Translate("Error code : "), l_inLastError, Translate(" \n Translated description : "), l_strErrorDescription);
          _DATA_IntegratedAbortHandler(Translate("HHS get serial numbers"), l_strMessageLastError);
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, l_strMessageLastError);
          return (ASWGLOBAL::BOOL::FALSE);
        }
        l_blnReturnValueHHS = HamiltonHeaterShaker3G::GetFirmwareVersion(l_intIndexHHSConnected, l_strFirmwareVersionCurrentHHS);
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Connected HHS number : "), l_intIndexHHSConnected, Translate(" - Firmware Version : "), l_strFirmwareVersionCurrentHHS);
        if (l_blnReturnValueHHS == ASWGLOBAL::BOOL::FALSE)
        {
          HamiltonHeaterShaker3G::GetLastDeviceError(l_intIndexHHSConnected, l_inLastError, l_strErrorDescription);
          l_strMessageLastError = StrConcat4(Translate("Error code : "), l_inLastError, Translate(" \n Translated description : "), l_strErrorDescription);
          _DATA_IntegratedAbortHandler(Translate("HHS get serial numbers"), l_strMessageLastError);
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, l_strMessageLastError);
          return (ASWGLOBAL::BOOL::FALSE);
        }
        l_blnReturnValueHHS = HamiltonHeaterShaker3G::GetTemperature(l_intIndexHHSConnected, l_fltTemperatureCurrentHHS);
        l_strTemperatureCurrentHHS = StrFStr(l_fltTemperatureCurrentHHS);
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Connected HHS number : "), l_intIndexHHSConnected, Translate(" - Temperature in °C : "), l_strTemperatureCurrentHHS);
        if (l_blnReturnValueHHS == ASWGLOBAL::BOOL::FALSE)
        {
          HamiltonHeaterShaker3G::GetLastDeviceError(l_intIndexHHSConnected, l_inLastError, l_strErrorDescription);
          l_strMessageLastError = StrConcat4(Translate("Error code : "), l_inLastError, Translate(" \n Translated description : "), l_strErrorDescription);
          _DATA_IntegratedAbortHandler(Translate("HHS get temperatures"), l_strMessageLastError);
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, l_strMessageLastError);
          return (ASWGLOBAL::BOOL::FALSE);
        }
        l_blnReturnValueHHS = HamiltonHeaterShaker3G::GetTempParameter(l_intIndexHHSConnected, l_intStartTimeOut, l_fltToleranceRange, l_fltSecurityRange);
        TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("Connected HHS number : "), l_intIndexHHSConnected, Translate(" - get start time out : "), l_intStartTimeOut, Translate(" seconds. Get Tolerance range +- "), l_fltToleranceRange, Translate(" °C - get security range +- "), l_fltSecurityRange, Translate(" °C."), Translate(""));
        if (l_blnReturnValueHHS == ASWGLOBAL::BOOL::FALSE)
        {
          HamiltonHeaterShaker3G::GetLastDeviceError(l_intIndexHHSConnected, l_inLastError, l_strErrorDescription);
          l_strMessageLastError = StrConcat4(Translate("Error code : "), l_inLastError, Translate(" \n Translated description : "), l_strErrorDescription);
          _DATA_IntegratedAbortHandler(Translate("HHS get temperature parameter"), l_strMessageLastError);
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, l_strMessageLastError);
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    t_arrIntCurrentHHSNumbers = HSLExtensions::Array::Copy(o_arrIntCurrentHHSNumbers);
    t_blnInitPerformed = ASWGLOBAL::BOOL::TRUE;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function HHS_StopInfinitShaking( variable i_intNumberOfConnectedHHS ) variable {
    private variable l_strMessageLastError;
    private variable l_blnReturnValueHHS;
    private variable l_inLastError;
    private variable l_strErrorDescription;
    private variable l_strStatusMessage;
    private variable l_intNumberOfHHSConnected;
    private variable loopCounter1;
    private variable l_strComment;
    private variable l_blnSuccess;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strStatusMessage = StrConcat12(Translate("HHS "), i_intNumberOfConnectedHHS, Translate(" [0 = all shaker] - stop infinit shaking."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    _DATA_AppendStatusWindow(l_strStatusMessage);
    if (i_intNumberOfConnectedHHS == 0)
    {
      l_intNumberOfHHSConnected=t_arrIntCurrentHHSNumbers.GetSize();
      l_blnReturnValueHHS = HamiltonHeaterShaker3G::StopAllShaker();
      if (l_blnReturnValueHHS == ASWGLOBAL::BOOL::FALSE)
      {
        {
          for(loopCounter1 = 0; loopCounter1 < l_intNumberOfHHSConnected;)
          {
            loopCounter1 = loopCounter1 + 1;
            HamiltonHeaterShaker3G::GetLastDeviceError(t_arrIntCurrentHHSNumbers.ElementAt( loopCounter1 -1), l_inLastError, l_strErrorDescription);
            l_strMessageLastError = StrConcat4(Translate("Error code : "), l_inLastError, Translate(" \n Translated description : "), l_strErrorDescription);
            _DATA_IntegratedAbortHandler(Translate("HHS stop all shaker"), l_strMessageLastError);
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
      }
    }
    else
    {
      l_blnReturnValueHHS = HamiltonHeaterShaker3G::StopShaker(i_intNumberOfConnectedHHS);
      l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("Stop shaker"));
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Stop shaker"));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function HHS_SetTemperature( variable i_intNumberOfConnectedHHS, variable i_fltTemperature, variable i_blnWaitForTempReached, variable i_blnActivateTemperatureRecording ) variable {
    private variable l_blnReturnValueHHS;
    private variable l_strTemperatureCurrentHHS;
    private variable l_fltTemperatureCurrentHHS;
    private variable l_strStatusMessage;
    private variable l_strComment;
    private variable l_blnSuccess;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strStatusMessage = StrConcat12(Translate("HHS "), i_intNumberOfConnectedHHS, Translate(" - set to "), i_fltTemperature, Translate(" °C. \nWait for temperature reached : "), i_blnWaitForTempReached, Translate(". Temperatur recording activated : "), i_blnActivateTemperatureRecording, Translate(""), Translate(""), Translate(""), Translate(""));
    _DATA_AppendStatusWindow(l_strStatusMessage);
    if (i_blnActivateTemperatureRecording == ASWGLOBAL::BOOL::TRUE)
    {
      l_blnReturnValueHHS = HamiltonHeaterShaker3G::StartTemperatureRecording(i_intNumberOfConnectedHHS);
      l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("Start temperature recording"));
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Start temperature recording"));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    l_blnReturnValueHHS = HamiltonHeaterShaker3G::StartTempCtrl(i_intNumberOfConnectedHHS, i_fltTemperature, i_blnWaitForTempReached);
    l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("Start temperature controlling"));
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Start temperature controlling"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnReturnValueHHS = HamiltonHeaterShaker3G::GetTemperature(i_intNumberOfConnectedHHS, l_fltTemperatureCurrentHHS);
    l_strTemperatureCurrentHHS = StrFStr(l_fltTemperatureCurrentHHS);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Connected HHS number : "), i_intNumberOfConnectedHHS, Translate(" - Temperature in °C : "), l_strTemperatureCurrentHHS);
    l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("Get temperature"));
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Get temperature"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function HHS_CheckTemperature( variable i_intNumberOfConnectedHHS, variable & o_fltTemperature ) variable {
    private variable l_strTemperatureCurrentHHS;
    private variable l_blnReturnValueHHS;
    private variable l_intNumberOfTrials;
    private variable l_intTemperatureState;
    private variable l_blnTriggerTimer;
    private variable l_strStatusMessage;
    private timer timer1;
    private variable l_strComment;
    private variable l_blnSuccess;
    o_fltTemperature = 0;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strStatusMessage = StrConcat12(Translate("HHS "), i_intNumberOfConnectedHHS, Translate(" - check temperature activated. "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    _DATA_AppendStatusWindow(l_strStatusMessage);
    {
      l_intNumberOfTrials = 0;
      while (1 == 1)
      {
        l_intNumberOfTrials = l_intNumberOfTrials + 1;
        l_blnTriggerTimer = ASWGLOBAL::BOOL::FALSE;
        l_blnReturnValueHHS = HamiltonHeaterShaker3G::GetTemperature(i_intNumberOfConnectedHHS, o_fltTemperature);
        l_strTemperatureCurrentHHS = StrFStr(o_fltTemperature);
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Connected HHS number : "), i_intNumberOfConnectedHHS, Translate(" - Temperature in °C : "), l_strTemperatureCurrentHHS);
        l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("HHS get temperature"));
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("HHS get temperature"));
          return (ASWGLOBAL::BOOL::FALSE);
        }
        l_blnReturnValueHHS = HamiltonHeaterShaker3G::GetTemperatureState(i_intNumberOfConnectedHHS, l_intTemperatureState);
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Connected HHS number : "), i_intNumberOfConnectedHHS, Translate(" - Temperature state : "), l_intTemperatureState);
        l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("HHS get temperature state"));
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("HHS get temperature state"));
          return (ASWGLOBAL::BOOL::FALSE);
        }
        if (l_intTemperatureState == HamiltonHeaterShaker3G::TemperatureState::Ok)
        {
          MECC::TraceComment(Translate("HamiltonHeaterShaker3G::TemperatureState::Ok  = 0 No error, temperature was always in the defined range. \n"));
          l_strStatusMessage = StrConcat12(Translate("HHS "), i_intNumberOfConnectedHHS, Translate(" reached "), o_fltTemperature, Translate(" °C."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          _DATA_AppendStatusWindow(l_strStatusMessage);
          break;
        }
        if (l_intTemperatureState == HamiltonHeaterShaker3G::TemperatureState::OutOfRange)
        {
          MECC::TraceComment(Translate("HamiltonHeaterShaker3G::TemperatureState::OutOfRange = 1 Temperature was or is out of temperature range. (default 2.0 °C)\n"));
          l_blnTriggerTimer = ASWGLOBAL::BOOL::TRUE;
          l_strStatusMessage = StrConcat12(Translate("HHS "), i_intNumberOfConnectedHHS, Translate(" reached "), o_fltTemperature, Translate(" °C."), Translate("TemperatureState::OutOfRange!"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          _DATA_AppendStatusWindow(l_strStatusMessage);
        }
        if (l_intTemperatureState == HamiltonHeaterShaker3G::TemperatureState::OutOfSecurity)
        {
          MECC::TraceComment(Translate("HamiltonHeaterShaker3G::TemperatureState::OutOfSecurity = 2 Temperature was out of security range. (default 6.0 °C)Temperature controlling is switched off now. \n"));
          l_blnTriggerTimer = ASWGLOBAL::BOOL::TRUE;
          l_strStatusMessage = StrConcat12(Translate("HHS "), i_intNumberOfConnectedHHS, Translate(" reached "), o_fltTemperature, Translate(" °C."), Translate("TemperatureState::OutOfSecurity!"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          _DATA_AppendStatusWindow(l_strStatusMessage);
        }
        if (l_intTemperatureState == HamiltonHeaterShaker3G::TemperatureState::TimeOut)
        {
          MECC::TraceComment(Translate("HamiltonHeaterShaker3G::TemperatureState::TimeOut = 3 Temperature time out during start of temperature controlling. (default 1800 seconds)\n"));
          l_blnTriggerTimer = ASWGLOBAL::BOOL::TRUE;
          l_strStatusMessage = StrConcat12(Translate("HHS "), i_intNumberOfConnectedHHS, Translate(" reached "), o_fltTemperature, Translate(" °C."), Translate("TemperatureState::TimeOut!"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          _DATA_AppendStatusWindow(l_strStatusMessage);
        }
        if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
        {
          if (l_blnTriggerTimer == ASWGLOBAL::BOOL::TRUE)
          {
            timer1.SetTimerViewName("HHS timer to get temperature each 10 seconds");
            if( 0 == timer1.SetTimer(10) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        if (l_intNumberOfTrials != 1)
        {
          l_strStatusMessage = StrConcat12(Translate("HHS function number of trials: "), l_intNumberOfTrials, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          _DATA_AppendStatusWindow(l_strStatusMessage);
        }
        if (l_intNumberOfTrials == 10)
        {
          _DATA_ShowListDialog(Translate("Get temperature state is not OK."), Translate("Retrieve temperature state of HHS."), Translate("Press OK to exit loop. Press CANCEL to abort run."), Translate("Hamilton Heater Shaker."));
          break;
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function HHS_GetRecordedTemperatureData( variable i_intNumberOfConnectedHHS, variable & o_arrFltRecordedTemperaturData[] ) variable {
    private variable l_blnReturnValueHHS;
    private variable l_strStatusMessage;
    private variable l_strComment;
    private variable l_blnSuccess;
    o_arrFltRecordedTemperaturData.SetSize( 0);
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strStatusMessage = StrConcat12(Translate("HHS "), i_intNumberOfConnectedHHS, Translate(" - retrieve recorded data activated. "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    _DATA_AppendStatusWindow(l_strStatusMessage);
    l_blnReturnValueHHS = HamiltonHeaterShaker3G::StopTemperatureRecording(i_intNumberOfConnectedHHS);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_blnReturnValueHHS"), l_blnReturnValueHHS);
    l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("Stop temperature recording"));
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Stop temperature recording"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnReturnValueHHS = HamiltonHeaterShaker3G::GetRecordedTemperatureData(i_intNumberOfConnectedHHS, o_arrFltRecordedTemperaturData);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_blnReturnValueHHS"), l_blnReturnValueHHS);
    l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("Get recorded temperature data"));
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Get recorded temperature data"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _ReportErrorText( variable i_intReturnValue, variable i_intNumberOfConnectedHHS, variable i_strFunctionName ) variable {
    private variable l_strMessageLastError;
    private variable l_inLastError;
    private variable l_strErrorDescription;
    if (i_intReturnValue == ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      HamiltonHeaterShaker3G::GetLastDeviceError(i_intNumberOfConnectedHHS, l_inLastError, l_strErrorDescription);
      l_strMessageLastError = StrConcat4(Translate("Error code : "), l_inLastError, Translate(" \n Translated description : "), l_strErrorDescription);
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Error message of HHS function : "), i_strFunctionName, Translate(" decrypted to : "), l_strMessageLastError);
      _DATA_IntegratedAbortHandler(i_strFunctionName, l_strMessageLastError);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if(0){
      if (i_intReturnValue == HamiltonHeaterShaker3G::ErrorCode::NoError)
      {
      }
      else
      {
      }
    }
  }

  function HHS_SetTemperatureAdvanced( variable i_intNumberOfConnectedHHS, variable i_fltTemperature, variable i_blnWaitForTempReached, variable i_blnActivateTemperatureRecording ) variable {
    private variable l_strTemperatureCurrentHHS;
    private variable l_fltTemperatureCurrentHHS;
    private variable l_blnReturnValueHHS;
    private variable l_strStatusMessage;
    private variable l_fltTemperatureInitial;
    private variable l_blnCoolingDown;
    private variable l_blnHeatingUp;
    private variable loopCounter1;
    private timer timer1;
    private variable l_strComment;
    private variable l_blnSuccess;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strStatusMessage = StrConcat12(Translate("HHS "), i_intNumberOfConnectedHHS, Translate(" - set to "), i_fltTemperature, Translate(" °C. \nWait for temperature reached : "), i_blnWaitForTempReached, Translate(". Temperatur recording activated : "), i_blnActivateTemperatureRecording, Translate(""), Translate(""), Translate(""), Translate(""));
    _DATA_AppendStatusWindow(l_strStatusMessage);
    l_blnReturnValueHHS = HamiltonHeaterShaker3G::GetTemperature(i_intNumberOfConnectedHHS, l_fltTemperatureInitial);
    l_strTemperatureCurrentHHS = StrFStr(l_fltTemperatureInitial);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Connected HHS number : "), i_intNumberOfConnectedHHS, Translate(" - Temperature in °C : "), l_strTemperatureCurrentHHS);
    l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("Get temperature"));
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Get temperature"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (i_blnActivateTemperatureRecording == ASWGLOBAL::BOOL::TRUE)
    {
      l_blnReturnValueHHS = HamiltonHeaterShaker3G::StartTemperatureRecording(i_intNumberOfConnectedHHS);
      l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("Start temperature recording"));
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Start temperature recording"));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    if (i_fltTemperature < l_fltTemperatureInitial)
    {
      l_blnCoolingDown = ASWGLOBAL::BOOL::TRUE;
      l_blnHeatingUp = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      l_blnCoolingDown = ASWGLOBAL::BOOL::FALSE;
      l_blnHeatingUp = ASWGLOBAL::BOOL::TRUE;
    }
    l_blnReturnValueHHS = HamiltonHeaterShaker3G::StartTempCtrl(i_intNumberOfConnectedHHS, i_fltTemperature, 0);
    l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("Start temperature controlling"));
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Start temperature controlling"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    {
      loopCounter1 = 0;
      while (1 == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        l_blnReturnValueHHS = HamiltonHeaterShaker3G::GetTemperature(i_intNumberOfConnectedHHS, l_fltTemperatureCurrentHHS);
        l_strTemperatureCurrentHHS = StrFStr(l_fltTemperatureCurrentHHS);
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Connected HHS number : "), i_intNumberOfConnectedHHS, Translate(" - Temperature in °C : "), l_strTemperatureCurrentHHS);
        l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("Get temperature"));
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Get temperature"));
          return (ASWGLOBAL::BOOL::FALSE);
        }
        if (l_blnCoolingDown == ASWGLOBAL::BOOL::TRUE)
        {
          if (l_fltTemperatureCurrentHHS <= i_fltTemperature)
          {
            break;
          }
        }
        if (l_blnHeatingUp == ASWGLOBAL::BOOL::TRUE)
        {
          if (l_fltTemperatureCurrentHHS >= i_fltTemperature)
          {
            break;
          }
        }
        if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
        {
          timer1.SetTimerViewName("");
          if( 0 == timer1.SetTimer(10) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        if (i_blnWaitForTempReached == ASWGLOBAL::BOOL::FALSE)
        {
          break;
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function HHS_Lock( variable i_intNumberOfConnectedHHS, variable i_blnLock ) variable {
    private variable l_strComment;
    private variable l_blnSuccess;
    private variable l_intNumberOfHHSConnected;
    private variable l_blnReturnValueHHS;
    private variable l_strStatusMessage;
    private variable loopCounter1;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strStatusMessage = StrConcat12(Translate("HHS "), i_intNumberOfConnectedHHS, Translate(" lock set to  "), i_blnLock, Translate("."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    _DATA_AppendStatusWindow(l_strStatusMessage);
    if (i_intNumberOfConnectedHHS == 0)
    {
      l_intNumberOfHHSConnected=t_arrIntCurrentHHSNumbers.GetSize();
      {
        for(loopCounter1 = 0; loopCounter1 < l_intNumberOfHHSConnected;)
        {
          loopCounter1 = loopCounter1 + 1;
          l_blnReturnValueHHS = HamiltonHeaterShaker3G::SetPlateLock(t_arrIntCurrentHHSNumbers.ElementAt( loopCounter1 -1), i_blnLock);
          l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("Set shaker parameter"));
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Set shaker parameter"));
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
      }
    }
    else
    {
      l_blnReturnValueHHS = HamiltonHeaterShaker3G::SetPlateLock(i_intNumberOfConnectedHHS, i_blnLock);
      l_blnSuccess = _ReportErrorText(l_blnReturnValueHHS, i_intNumberOfConnectedHHS, Translate("Set shaker parameter"));
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Set shaker parameter"));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }
} // library namespace
