#pragma once
#include "HSLStrLib.hsl"
#include "Inheco ODTC\\Inheco ODTC.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLMthLib.hsl"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "HSLExtensions\\String.hsl"
#include "HSLTimLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLUtilLib.hsl"
#include "RemoveTextDelimiters\\RemoveTextDelimitersFromAsciiTextFile.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace INHECOODTC_CONTROLLER {
  variable t_blnSimulationModeON;
  variable t_strODTCMethodName;
  variable t_intGetTraceLevel;
  variable t_strMethodName;
  variable t_activateIntegratedAbortHandler;
  variable t_blnInitPerformed;
  variable t_strLibraryName;
  variable t_strFunctionName;
  function Init( variable i_strDeviceAddress, variable & o_intDeviceNum, variable i_strLocalIPAdress, variable i_blnSimulationModeON, variable i_ActivateIntegratedAbortHandler, variable & o_strNameAndVersion ) variable ;
  function ODTC_CloseDoor( variable i_intDeviceNumber ) variable ;
  function ODTC_DownloadProtocol( variable i_intDeviceNumber, variable i_strProtocollFullFileName ) variable ;
  function ODTC_ExecuteProtocol( variable i_intDeviceNumber, variable i_strProtocollFullFileName, variable i_strNameOfProtocollOnDevice, variable & o_intTimeForProtocol, variable & o_intRequestIDForActiveProtocol, variable i_blnShortenPreheatingMethodsTo40Seconds ) variable ;
  function ODTC_GetDataFromLastRun( variable i_intDeviceNumber, variable i_strNameOfODTCProtocol ) variable ;
  function ODTC_OpenDoor( variable i_intDeviceNumber ) variable ;
  function ODTC_Terminate( variable i_intDeviceNumber, variable i_blnOpenDoorRequested ) variable ;
  function ODTC_WaitForLidAndBlockCorrectTemperature( variable i_intDeviceNumber, variable i_fltRequestedBlockTemperature, variable i_fltRequestedLidTemperature ) variable ;
  function ODTC_WaitForStartedProtocolToFinish( variable i_intDeviceNumber, variable i_intTimeOut, variable & io_intRequestIDToWaitFor ) variable ;
  private function _DATA_AppendStatusWindow( variable i_strMessageToAppend ) void ;
  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void ;
  private function _GetDataFromLastRun_ExportData( variable i_strResultOfLastRunODTC, variable i_strNameOfProtocolPerfromedODTC, variable & o_strFullPathExportedDataODTC ) variable ;
  private function _ODTC_CheckStatus( variable i_intDeviceNumber, variable i_strFunctionName ) variable ;
  private function _ODTC_HandleReturnValue( variable i_blnSuccess, variable i_strFunctionName, variable i_intReturnValue, variable i_strMessage ) variable ;
  private function _Version(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  private function _Version(  ) void {
  }

  function Init( variable i_strDeviceAddress, variable & o_intDeviceNum, variable i_strLocalIPAdress, variable i_blnSimulationModeON, variable i_ActivateIntegratedAbortHandler, variable & o_strNameAndVersion ) variable {
    private variable l_strMessage;
    private variable l_intReturnValue;
    private variable l_blnReturnValue;
    private variable l_strDescription;
    private variable l_strComment;
    private variable l_str_ReturnNameAndVersion;
    private variable l_strControllerVersion;
    private variable l_blnSuccess;
    private variable t_strLibraryNameWithoutExtension;
    o_intDeviceNum = 0;
    o_strNameAndVersion = 0;
    t_strMethodName = Translate("");
    t_strMethodName = GetMethodFileName();
    t_intGetTraceLevel = TRACELEVEL::GetTraceLevel();
    t_strLibraryName = Translate("");
    t_strFunctionName = Translate("");
    l_strControllerVersion = Translate("");
    l_str_ReturnNameAndVersion = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    l_strControllerVersion = "0.5.5";
    t_strLibraryNameWithoutExtension = HSLExtensions::File::GetFileNameWithoutExtension(t_strLibraryName);
    o_strNameAndVersion = StrConcat4(t_strLibraryNameWithoutExtension, Translate(" "), l_strControllerVersion, Translate(""));
    l_strDescription = o_strNameAndVersion;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strDescription);
    t_activateIntegratedAbortHandler = i_ActivateIntegratedAbortHandler;
    t_blnSimulationModeON = Util::GetSimulationMode();
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      t_blnSimulationModeON = i_blnSimulationModeON;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("t_blnSimulationModeON : "), t_blnSimulationModeON);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_strLocalIPAdress : "), i_strLocalIPAdress);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_strDeviceAddress : "), i_strDeviceAddress);
    Inheco_ODTC::Standard::SetTraceLevel(t_intGetTraceLevel);
    l_blnReturnValue = Inheco_ODTC::Standard::Connect(i_strLocalIPAdress, i_strDeviceAddress, Translate(""), t_blnSimulationModeON, o_intDeviceNum, l_strMessage);
    l_blnSuccess = _ODTC_HandleReturnValue(l_blnReturnValue, "INHECOODTCCONTROLLER::Connect", l_intReturnValue, l_strMessage);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("INHECOODTCCONTROLLER::Connect"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnReturnValue = Inheco_ODTC::Standard::Reset(o_intDeviceNum, t_blnSimulationModeON, 120, Translate(""), Translate(""), Translate(""), l_intReturnValue, l_strMessage);
    l_blnSuccess = _ODTC_HandleReturnValue(l_blnReturnValue, "INHECOODTCCONTROLLER::ResetDevice", l_intReturnValue, l_strMessage);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("INHECOODTCCONTROLLER::ResetDevice"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnReturnValue = Inheco_ODTC::Standard::Initialize(o_intDeviceNum, Translate(""), l_intReturnValue, l_strMessage);
    l_blnSuccess = _ODTC_HandleReturnValue(l_blnReturnValue, "INHECOODTCCONTROLLER::Initialize", l_intReturnValue, l_strMessage);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("INHECOODTCCONTROLLER::Initialize"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnSuccess = _ODTC_CheckStatus(o_intDeviceNum, Translate("INHECOODTCCONTROLLER::Initialize"));
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate(""));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    t_blnInitPerformed = ASWGLOBAL::BOOL::TRUE;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _ODTC_HandleReturnValue( variable i_blnSuccess, variable i_strFunctionName, variable i_intReturnValue, variable i_strMessage ) variable {
    private variable l_retValueDialog;
    private variable l_strTrace;
    private variable l_strMethodName;
    private variable l_strReturnValueODTC;
    private variable l_strDeviceMessage;
    private variable l_strFunctionName;
    private variable l_arrListODTCtMessage[];
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      if (i_blnSuccess == ASWGLOBAL::BOOL::TRUE)
      {
        l_strTrace = StrConcat4("SiLA message was '", i_strMessage, "', SiLA return value was ", i_intReturnValue);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strTrace, Translate(""));
        return (ASWGLOBAL::BOOL::TRUE);
      }
      else
      {
        l_strTrace = StrConcat4("SiLA message was '", i_strMessage, "', SiLA return value was ", i_intReturnValue);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strTrace, Translate(""));
        l_strFunctionName = StrConcat2(Translate("Function name   : "), i_strFunctionName);
        l_strMethodName = StrConcat2(Translate("Method name    :"), t_strODTCMethodName);
        l_strDeviceMessage = StrConcat2(Translate("Device message :"), i_strMessage);
        l_strReturnValueODTC = StrIStr(i_intReturnValue);
        l_strReturnValueODTC = StrConcat2(Translate("Device return value :"), l_strReturnValueODTC);
        l_arrListODTCtMessage.SetSize(0);
        l_arrListODTCtMessage.AddAsLast(l_strFunctionName);
        l_arrListODTCtMessage.AddAsLast(l_strMethodName);
        l_arrListODTCtMessage.AddAsLast(l_strDeviceMessage);
        l_arrListODTCtMessage.AddAsLast(l_strReturnValueODTC);
        l_retValueDialog = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("ODTC - handle retrun value - action completed with error : "), Translate("The  method will abort - get in contact with HAMILTON Technical Support if this problem is permanent. Check the HAMILTON and INHECO log files "), l_arrListODTCtMessage);
        _DATA_IntegratedAbortHandler(i_strFunctionName, Translate("ODTC Handle return value is not = success."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    else
    {
      return (ASWGLOBAL::BOOL::TRUE);
    }
  }

  function ODTC_Terminate( variable i_intDeviceNumber, variable i_blnOpenDoorRequested ) variable {
    private variable l_strMessage;
    private variable l_intReturnValue;
    private variable l_strDisplayTextToStatusWindow;
    private variable l_blnReturnValue;
    private variable l_strComment;
    if (t_blnInitPerformed == ASWGLOBAL::BOOL::FALSE)
    {
      MECC::TraceComment(Translate("This step was introduced to avoid terminating a device without having initialized it in prior.\nThis may happen if a run is aborted and the init step was not called before --> on abort handler might still call terminate command.."));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    VectorCustomDialogs::Initialize();
    l_strDisplayTextToStatusWindow = StrConcat4(Translate("Terminate device : ODTC. "), Translate(""), Translate(""), Translate(""));
    VectorCustomDialogs::AppendStatusText(l_strDisplayTextToStatusWindow);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      onerror goto errLabel_1 ;
      err.Clear();
      Inheco_ODTC::Standard::StopMethod(i_intDeviceNumber, Translate(""), l_intReturnValue, l_strMessage);
      errLabel_1 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        MECC::TraceComment(Translate("Stop method failed in terminate command - perhaps no method has been started"));
      }   /* end if from skip handler if no error */
      if (i_blnOpenDoorRequested == ASWGLOBAL::BOOL::TRUE)
      {
        onerror goto errLabel_2 ;
        err.Clear();
        l_blnReturnValue = Inheco_ODTC::Standard::OpenDoor(i_intDeviceNumber, Translate(""), l_intReturnValue, l_strMessage);
        if (l_blnReturnValue == ASWGLOBAL::BOOL::FALSE)
        {
          _DATA_AppendStatusWindow(Translate("Open door of ODTC within termination process failed"));
        }
        errLabel_2 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          MECC::TraceComment(Translate("Open door failed in terminate command - bypassed with try catch block to allow proper termination of the device"));
        }   /* end if from skip handler if no error */
      }
      l_blnReturnValue = Inheco_ODTC::Standard::Terminate(i_intDeviceNumber, l_strMessage);
      if (l_blnReturnValue == ASWGLOBAL::BOOL::FALSE)
      {
        _DATA_AppendStatusWindow(Translate("TERMIANTE ODTC FAILED"));
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function ODTC_OpenDoor( variable i_intDeviceNumber ) variable {
    private variable l_strMessage;
    private variable l_intReturnValue;
    private variable l_blnReturnValue;
    private variable l_strComment;
    private variable l_blnSuccess;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_blnReturnValue = Inheco_ODTC::Standard::OpenDoor(i_intDeviceNumber, Translate(""), l_intReturnValue, l_strMessage);
    l_blnSuccess = _ODTC_HandleReturnValue(l_blnReturnValue, "INHECOODTCCONTROLLER::OPENDoor", l_intReturnValue, l_strMessage);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("INHECOODTCCONTROLLER::OPENDoor"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnSuccess = _ODTC_CheckStatus(i_intDeviceNumber, Translate("INHECOODTCCONTROLLER::OPENDoor"));
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate(""));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function ODTC_CloseDoor( variable i_intDeviceNumber ) variable {
    private variable l_strMessage;
    private variable l_intReturnValue;
    private variable l_blnReturnValue;
    private variable l_strComment;
    private variable l_blnSuccess;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_blnReturnValue = Inheco_ODTC::Standard::CloseDoor(i_intDeviceNumber, Translate(""), l_intReturnValue, l_strMessage);
    l_blnSuccess = _ODTC_HandleReturnValue(l_blnReturnValue, "INHECOODTCCONTROLLER::CloseDoor", l_intReturnValue, l_strMessage);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Close door"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnSuccess = _ODTC_CheckStatus(i_intDeviceNumber, Translate("INHECOODTCCONTROLLER::CloseDoor"));
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate(""));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function ODTC_WaitForStartedProtocolToFinish( variable i_intDeviceNumber, variable i_intTimeOut, variable & io_intRequestIDToWaitFor ) variable {
    private variable l_strPmsID;
    private variable l_strState;
    private variable l_strMessage;
    private variable l_strTrace;
    private variable l_intTimeToWait;
    private variable l_strDeviceID;
    private variable l_intReturnValue;
    private variable l_strCurrentTime;
    private variable l_blnLocked;
    private variable l_blnReturn;
    private variable l_strComment;
    private variable l_blnSuccess;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    if (io_intRequestIDToWaitFor == 0)
    {
      MECC::TraceComment(Translate("Request ID is equal to 0. No protocol is executed and therefore no need to wait."));
      return (ASWGLOBAL::BOOL::TRUE);
    }
    _DATA_AppendStatusWindow(t_strFunctionName);
    l_intTimeToWait = i_intTimeOut + 20;
    l_strTrace = StrConcat2("Effective time to wait before an error is triggered = ", l_intTimeToWait);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), l_strTrace);
    l_blnReturn = Inheco_ODTC::Standard::WaitForEndOfExecuteMethod(i_intDeviceNumber, l_intTimeToWait, io_intRequestIDToWaitFor, l_intReturnValue, l_strMessage);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Return value of command WsitForEndOfExecutedMethod : "), l_blnReturn);
    l_blnSuccess = _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::WaitForStartedProtocolToFinish", l_intReturnValue, l_strMessage);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("INHECOODTCCONTROLLER::WaitForStartedProtocolToFinish"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      l_blnReturn = Inheco_ODTC::Standard::GetStatus(i_intDeviceNumber, l_strDeviceID, l_strState, l_blnLocked, l_strPmsID, l_strCurrentTime, l_intReturnValue, l_strMessage);
      l_strTrace = StrConcat12("l_strDeviceID = ", l_strDeviceID, ", l_strState = ", l_strState, ", l_blnLocked = ", l_blnLocked, ", l_strPMSID = ", l_strPmsID, ", l_strCurrentDeviceTime = ", l_strCurrentTime, ", l_intReturnValue = ", l_intReturnValue);
      l_strTrace = StrConcat4(l_strTrace, ", l_strMessage = ", l_strMessage, "");
      l_blnSuccess = _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::GetStatus", l_intReturnValue, l_strTrace);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("INHECOODTCCONTROLLER::GetStatus"));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    MECC::TraceComment(Translate("New logic implemented to always reset the requesd ID to 0 after a protocol has been finished."));
    io_intRequestIDToWaitFor = 0;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function ODTC_ExecuteProtocol( variable i_intDeviceNumber, variable i_strProtocollFullFileName, variable i_strNameOfProtocollOnDevice, variable & o_intTimeForProtocol, variable & o_intRequestIDForActiveProtocol, variable i_blnShortenPreheatingMethodsTo40Seconds ) variable {
    private variable l_intPriority;
    private variable l_strMessage;
    private variable l_intReturnValue;
    private variable l_strDisplayTextToStatusWindow;
    private variable l_fltHours;
    private variable l_fltRemaining;
    private variable l_intHours;
    private variable l_fltMinutes;
    private variable l_intRemaining;
    private variable l_intSeconds;
    private variable l_intMinutes;
    private variable l_blnReturnValue;
    private variable l_strComment;
    private variable l_blnSuccess;
    o_intTimeForProtocol = 0;
    o_intRequestIDForActiveProtocol = 0;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(" ODTC script to be executed: "), i_strProtocollFullFileName);
    l_strDisplayTextToStatusWindow = StrConcat4(Translate("ODTC execute protocol : "), i_strProtocollFullFileName, Translate(" ; Script : "), i_strNameOfProtocollOnDevice);
    if (i_blnShortenPreheatingMethodsTo40Seconds == ASWGLOBAL::BOOL::TRUE)
    {
      l_intPriority = 10000;
    }
    else
    {
      l_intPriority = 10;
    }
    l_blnReturnValue = Inheco_ODTC::Standard::ExecuteMethod(i_intDeviceNumber, Translate(""), i_strNameOfProtocollOnDevice, l_intPriority, o_intTimeForProtocol, o_intRequestIDForActiveProtocol, l_intReturnValue, l_strMessage);
    l_blnSuccess = _ODTC_HandleReturnValue(l_blnReturnValue, "INHECOODTCCONTROLLER::ExecuteMethod", l_intReturnValue, l_strMessage);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("INHECOODTCCONTROLLER::ExecuteMethod"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    t_strODTCMethodName = i_strNameOfProtocollOnDevice;
    l_fltHours = o_intTimeForProtocol / (3600 * 1.0);
    if (l_fltHours < 1)
    {
      l_intHours = 0;
      l_intRemaining = 0;
    }
    else
    {
      if (l_fltHours >= 2)
      {
        l_intHours = 2;
        l_intRemaining = 7200;
        if (l_fltHours >= 3)
        {
          l_intHours = 3;
          l_intRemaining = 10800;
        }
        else
        {
          if (l_fltHours >= 4)
          {
            l_intHours = 4;
            l_intRemaining = 14400;
          }
          else
          {
            if (l_fltHours >= 5)
            {
              l_intHours = 5;
              l_intRemaining = 18000;
            }
            else
            {
              if (l_fltHours >= 6)
              {
                l_intHours = 6;
                l_intRemaining = 21600;
              }
              else
              {
                if (l_fltHours >= 7)
                {
                  l_intHours = 7;
                  l_intRemaining = 25200;
                }
                else
                {
                  if (l_fltHours >= 8)
                  {
                    l_intHours = 8;
                    l_intRemaining = 28800;
                  }
                  else
                  {
                    if (l_fltHours >= 9)
                    {
                      l_intHours = 9;
                      l_intRemaining = 32400;
                    }
                    else
                    {
                      if (l_fltHours >= 10)
                      {
                        l_intHours = 10;
                        l_intRemaining = 36000;
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
      else
      {
        l_intHours = 1;
        l_intRemaining = 3600;
      }
    }
    l_fltMinutes = o_intTimeForProtocol - l_intRemaining;
    l_fltMinutes = l_fltMinutes / (60 * 1.0);
    l_intMinutes = MthFFloor(l_fltMinutes);
    l_fltRemaining = l_fltMinutes - l_intMinutes;
    l_intSeconds = l_fltRemaining * 60;
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
    {
      l_intHours = 1;
      l_intMinutes = 2;
      l_intSeconds = 3;
      l_strDisplayTextToStatusWindow = StrConcat12(Translate("Duration of running protocol SIMULATED : "), l_intHours, Translate(" hours, "), l_intMinutes, Translate(" minutes, "), l_intSeconds, Translate(" seconds."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    else
    {
      l_strDisplayTextToStatusWindow = StrConcat12(Translate("Duration of running protocol : "), l_intHours, Translate(" hours, "), l_intMinutes, Translate(" minutes, "), l_intSeconds, Translate(" seconds."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), l_strDisplayTextToStatusWindow);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function ODTC_DownloadProtocol( variable i_intDeviceNumber, variable i_strProtocollFullFileName ) variable {
    private variable l_strMessage;
    private variable l_intReturnValue;
    private variable l_blnReturnValue;
    private variable l_strComment;
    private variable l_blnSuccess;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_blnReturnValue = Inheco_ODTC::Standard::DownloadProtocol(i_intDeviceNumber, Translate(""), i_strProtocollFullFileName, l_intReturnValue, l_strMessage);
    l_blnSuccess = _ODTC_HandleReturnValue(l_blnReturnValue, "INHECOODTCCONTROLLER::DownloadProtocol", l_intReturnValue, l_strMessage);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("INHECOODTCCONTROLLER::DownloadProtocol"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnSuccess = _ODTC_CheckStatus(i_intDeviceNumber, Translate("INHECOODTCCONTROLLER::DownloadProtocol"));
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate(""));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void {
    private variable l_strAffectedLibrary;
    private variable l_strAbortMessage;
    private variable l_arrListAbortHandlerMessage[];
    private variable l_strFunctionName;
    private variable l_strComment;
    if (t_activateIntegratedAbortHandler == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strFunctionName = Translate("");
    l_strComment = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, l_strComment);
    l_strAffectedLibrary = StrConcat2(Translate("Affected library :    "), i_strFunctionName);
    l_strAbortMessage = StrConcat2(Translate("Message : "), i_strAbortMessage);
    l_arrListAbortHandlerMessage.SetSize(0);
    l_arrListAbortHandlerMessage.AddAsLast(l_strAffectedLibrary);
    l_arrListAbortHandlerMessage.AddAsLast(l_strAbortMessage);
    VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Internal abort handler activated - error occurred - abort routine started"), Translate("The  method will abort - get in contact with HAMILTON Technical Support if this problem is permanent. Check the HAMILTON and INHECO log files"), l_arrListAbortHandlerMessage);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, i_strAbortMessage);
    abort;
  }

  function ODTC_WaitForLidAndBlockCorrectTemperature( variable i_intDeviceNumber, variable i_fltRequestedBlockTemperature, variable i_fltRequestedLidTemperature ) variable {
    private variable l_strDeviceID;
    private variable l_fltMaxAllowedLidTemperature;
    private variable l_fltMinAllowedMountTemperature;
    private variable l_fltMaxAllowedMountTemperature;
    private variable l_strPmsID;
    private variable l_fltActualMountTemperature;
    private variable l_strTime;
    private variable l_strMessage;
    private variable l_strState;
    private variable l_intReturnValue;
    private variable l_fltActualLidTemperature;
    private variable l_strCurrentTime;
    private variable l_blnLocked;
    private variable l_strTrace;
    private variable l_fltMinAllowedLidTemperature;
    private variable l_blnReturn;
    private variable l_repeatLoop;
    private variable l_intLidTemperature;
    private variable l_intEvaluatingTemperature;
    private variable l_intMountTemperature;
    private variable l_intTemperatureLidMount;
    private timer l_hdlTimerWaitForTemperature;
    private variable l_arrFltActualTemperatures[];
    private variable l_arrStrActualTemperatures[];
    private variable l_intCounterToEvaluateLidAndBlockTemperatures;
    private variable l_strDisplayTextToStatusWindow;
    private variable l_strMessageBlockLidTemperature;
    private variable l_strComment;
    private variable l_blnSuccess;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    _DATA_AppendStatusWindow(t_strFunctionName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_fltRequestedBlockTemperature : "), i_fltRequestedBlockTemperature);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_fltRequestedLidTemperature : "), i_fltRequestedLidTemperature);
    l_fltMaxAllowedLidTemperature = i_fltRequestedLidTemperature + 15;
    l_fltMinAllowedLidTemperature = i_fltRequestedLidTemperature - 5;
    l_fltMaxAllowedMountTemperature = i_fltRequestedBlockTemperature + 0.5;
    l_fltMinAllowedMountTemperature = i_fltRequestedBlockTemperature - 0.5;
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      l_blnReturn = Inheco_ODTC::Standard::GetStatus(i_intDeviceNumber, l_strDeviceID, l_strState, l_blnLocked, l_strPmsID, l_strCurrentTime, l_intReturnValue, l_strMessage);
      l_strTrace = StrConcat12("l_strDeviceID = ", l_strDeviceID, ", l_strState = ", l_strState, ", l_blnLocked = ", l_blnLocked, ", l_strPMSID = ", l_strPmsID, ", l_strCurrentDeviceTime = ", l_strCurrentTime, ",l_intReturnValue = ", l_intReturnValue);
      l_strTrace = StrConcat4(l_strTrace, ", l_strMessage = ", l_strMessage, "");
      _ODTC_HandleReturnValue(l_blnReturn, "INHECOODTCCONTROLLER::GetStatus", l_intReturnValue, l_strTrace);
    }
    MECC::TraceComment(Translate("Read Current Temperature for Lid and Block"));
    l_blnReturn = Inheco_ODTC::Standard::ReadActualTemperature(i_intDeviceNumber, Translate(""), l_strTime, l_arrFltActualTemperatures, l_arrStrActualTemperatures, l_intReturnValue, l_strMessage);
    _ODTC_HandleReturnValue(l_blnReturn, "Inheco_ODTC::Standard::ReadActualTemperature", l_intReturnValue, l_strMessage);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("Read Current Temperature for Lid and Block ***simulated with fake values"));
      l_fltActualLidTemperature = i_fltRequestedLidTemperature + 2;
      l_fltActualMountTemperature = i_fltRequestedBlockTemperature + 2;
    }
    else
    {
      TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arrFltActualTemperatures : "), l_arrFltActualTemperatures);
      l_fltActualLidTemperature=l_arrFltActualTemperatures.GetAt(4-1);
      l_fltActualMountTemperature=l_arrFltActualTemperatures.GetAt(6-1);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_fltActualMountTemperature : "), l_fltActualMountTemperature);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_fltActualLidTemperature : "), l_fltActualLidTemperature);
    l_repeatLoop = 1;
    l_intEvaluatingTemperature = 0;
    {
      l_intCounterToEvaluateLidAndBlockTemperatures = 0;
      while (1 == 1)
      {
        l_intCounterToEvaluateLidAndBlockTemperatures = l_intCounterToEvaluateLidAndBlockTemperatures + 1;
        if( 0 == l_hdlTimerWaitForTemperature.SetTimer(10) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == l_hdlTimerWaitForTemperature.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_intMountTemperature = 0;
        l_intLidTemperature = 0;
        l_blnReturn = Inheco_ODTC::Standard::ReadActualTemperature(i_intDeviceNumber, Translate(""), l_strTime, l_arrFltActualTemperatures, l_arrStrActualTemperatures, l_intReturnValue, l_strMessage);
        l_blnSuccess = _ODTC_HandleReturnValue(l_blnReturn, "Inheco_ODTC::Standard::ReadActualTemperature", l_intReturnValue, l_strMessage);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("Inheco_ODTC::Standard::ReadActualTemperature"));
          return (ASWGLOBAL::BOOL::FALSE);
        }
        if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
        {
          MECC::TraceComment(Translate("Read Current Temperature for Lid and Block ***simulated with fake values"));
          l_fltActualLidTemperature = i_fltRequestedLidTemperature + 2;
          l_fltActualMountTemperature = i_fltRequestedBlockTemperature + 2;
        }
        else
        {
          l_fltActualLidTemperature=l_arrFltActualTemperatures.GetAt(4-1);
          l_fltActualMountTemperature=l_arrFltActualTemperatures.GetAt(6-1);
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_fltActualMountTemperature : "), l_fltActualMountTemperature);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_fltActualLidTemperature : "), l_fltActualLidTemperature);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(""), Translate("------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- -------"));
        if (l_fltActualLidTemperature >= l_fltMinAllowedLidTemperature)
        {
          if (l_fltActualLidTemperature <= l_fltMaxAllowedLidTemperature)
          {
            l_intLidTemperature = 1;
          }
          else
          {
            l_intLidTemperature = 0;
          }
        }
        else
        {
          l_intLidTemperature = 0;
        }
        if (l_intLidTemperature == 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("-------  Requested Lid Temperature not reached yet - current temperature = "), l_fltActualLidTemperature);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("------- Minimum Lid Temperature allowed: "), l_fltMinAllowedLidTemperature);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("------- Maximum Lid Temperature allowed: "), l_fltMaxAllowedLidTemperature);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate("------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- -------"));
        }
        if (l_fltActualMountTemperature >= l_fltMinAllowedMountTemperature)
        {
          if (l_fltActualMountTemperature <= l_fltMaxAllowedMountTemperature)
          {
            l_intMountTemperature = 1;
          }
          else
          {
            l_intMountTemperature = 0;
          }
        }
        else
        {
          l_intMountTemperature = 0;
        }
        if (l_intMountTemperature == 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("-------  Requested block Temperature not reached yet - current temperature = "), l_fltActualMountTemperature);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("------- Minimum block Temperature allowed: "), l_fltMinAllowedMountTemperature);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("------- Maximum block Temperature allowed: "), l_fltMaxAllowedMountTemperature);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate("------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- ------- -------"));
        }
        l_intTemperatureLidMount = l_intLidTemperature + l_intMountTemperature;
        if (l_intTemperatureLidMount == 2)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("------- Temperatures for Block and Lid have been reached. Now evaluating stability..."), Translate(""));
          l_intEvaluatingTemperature = l_intEvaluatingTemperature + 1;
          if (l_intEvaluatingTemperature == 3)
          {
            break;
          }
        }
        l_strDisplayTextToStatusWindow = StrConcat12(Translate("ODTC waiting to reach bock temperature : "), i_fltRequestedBlockTemperature, Translate(" °C and lid temperature : "), i_fltRequestedLidTemperature, Translate(" °C."), Translate("Actual block temperature : "), l_fltActualMountTemperature, Translate(" °C and actual lid temperature : "), l_fltActualLidTemperature, Translate(" °C. Performing ODTC script : "), t_strODTCMethodName, Translate("."));
        if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
        {
          if (l_intCounterToEvaluateLidAndBlockTemperatures == 3)
          {
            break;
          }
        }
        else
        {
          if (l_intCounterToEvaluateLidAndBlockTemperatures == 50)
          {
            l_strMessageBlockLidTemperature = StrConcat12(Translate("Could not reach temperatures."), Translate(" "), Translate("Requested block temperature : "), i_fltRequestedBlockTemperature, Translate(" °C. Reached block temperature : "), l_fltActualMountTemperature, Translate(" °C. Requested lid temperature : "), i_fltRequestedLidTemperature, Translate(" °C. Reached block temperature : "), l_fltActualLidTemperature, Translate(" °C."), Translate(""));
            VectorCustomDialogs::MessageDialog(Translate("Check ODTC BLOCK and LID temperatures"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 10, l_strMessageBlockLidTemperature);
            break;
          }
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_AppendStatusWindow( variable i_strMessageToAppend ) void {
    onerror goto errLabel_3 ;
    err.Clear();
    VectorCustomDialogs::AppendStatusText(i_strMessageToAppend);
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      VectorCustomDialogs::Initialize();
      VectorCustomDialogs::ShowStatusDialog(Translate("ODTC controller"));
      VectorCustomDialogs::AppendStatusText(i_strMessageToAppend);
    }   /* end if from skip handler if no error */
  }

  private function _ODTC_CheckStatus( variable i_intDeviceNumber, variable i_strFunctionName ) variable {
    private variable l_strDeviceID;
    private variable l_strPmsID;
    private variable l_strMessage;
    private variable l_strState;
    private variable l_intReturnValue;
    private variable l_strCurrentTime;
    private variable l_blnLocked;
    private variable l_strTrace;
    private variable l_blnReturnValue;
    private timer l_hdlTimerWaitForODTCStatus;
    private variable l_strComment;
    private variable l_strMessageForStatusWindow;
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      l_strComment = Translate("");
      t_strFunctionName = GetFunctionName();
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
      l_blnReturnValue = Inheco_ODTC::Standard::GetStatus(i_intDeviceNumber, l_strDeviceID, l_strState, l_blnLocked, l_strPmsID, l_strCurrentTime, l_intReturnValue, l_strMessage);
      l_strTrace = StrConcat12("l_strDeviceID = ", l_strDeviceID, ", l_strState = ", l_strState, ", l_blnLocked = ", l_blnLocked, ", l_strPMSID = ", l_strPmsID, ", l_strCurrentDeviceTime = ", l_strCurrentTime, ", l_intReturnValue = ", l_intReturnValue);
      l_strTrace = StrConcat4(l_strTrace, ", l_strMessage = ", l_strMessage, "");
      if (l_strState == "idle")
      {
        l_strTrace = StrConcat4(Translate("------- ODTC device status is idle after performing following function : "), i_strFunctionName, Translate(". -------"), l_strTrace);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strTrace, Translate(""));
      }
      else
      {
        if( 0 == l_hdlTimerWaitForODTCStatus.SetTimer(3) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == l_hdlTimerWaitForODTCStatus.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_strTrace = Translate("");
        l_blnReturnValue = Inheco_ODTC::Standard::GetStatus(i_intDeviceNumber, l_strDeviceID, l_strState, l_blnLocked, l_strPmsID, l_strCurrentTime, l_intReturnValue, l_strMessage);
        l_strTrace = StrConcat12("l_strDeviceID = ", l_strDeviceID, ", l_strState = ", l_strState, ", l_blnLocked = ", l_blnLocked, ", l_strPMSID = ", l_strPmsID, ", l_strCurrentDeviceTime = ", l_strCurrentTime, ", l_intReturnValue = ", l_intReturnValue);
        l_strTrace = StrConcat4(l_strTrace, ", l_strMessage = ", l_strMessage, "");
        if (l_strState == "idle")
        {
          MECC::TraceComment(Translate("after 2nd tiral stauts = idle... "));
        }
        else
        {
          l_strTrace = StrConcat4(Translate("------- ODTC device status is NOT idle after 3 seconds delay performing following function : "), i_strFunctionName, Translate(". -------"), l_strTrace);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strTrace, Translate(""));
          l_strMessageForStatusWindow = StrConcat2(Translate("ODTC responds not being idle - current status = "), l_strState);
          _DATA_AppendStatusWindow(l_strMessageForStatusWindow);
          _DATA_IntegratedAbortHandler(i_strFunctionName, l_strTrace);
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
      t_strFunctionName = Translate("");
      return (ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      return (ASWGLOBAL::BOOL::TRUE);
    }
  }

  function ODTC_GetDataFromLastRun( variable i_intDeviceNumber, variable i_strNameOfODTCProtocol ) variable {
    private variable l_strDisplayTextToStatusWindow;
    private variable l_strFullPathResultXML;
    private variable l_strMessage;
    private variable l_intReturnValue;
    private variable l_blnReturnValue;
    private variable l_strResultXML_DataOfLastRun;
    private variable l_strFullPathFileODTCReport;
    private variable l_strComment;
    private variable l_blnSuccess;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_blnReturnValue = Inheco_ODTC::Advanced::GetLastData(i_intDeviceNumber, Translate(""), l_strResultXML_DataOfLastRun, l_intReturnValue, l_strMessage);
    l_blnSuccess = _ODTC_HandleReturnValue(l_blnReturnValue, "INHECOODTCCONTROLLER::GetLastData", l_intReturnValue, l_strMessage);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("INHECOODTCCONTROLLER::GetLastData"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
    {
      l_strResultXML_DataOfLastRun = Translate("<?xml version=\"1.0\" encoding=\"utf-8\"?><ResponseData xmlns:xsi=\"http://www.w3.org/2001/XMLSchema-instance\" xsi:noNamespaceSchemaLocation=\"ResponseType_1.2.xsd\"><AnyData>&lt;?xml version=\"1.0\" encoding=\"utf-8\"?&gt;&lt;containerData xmlns:xsi=\"http://www.w3.org/2001/XMLSchema-instance\" xsi:noNamespaceSchemaLocation=\"DataCapture_1.0.xsd\" version=\"1.0\"&gt;&lt;experimentStep name=\"Temperature Trace\" sequence=\"0\" type=\"Measurement\"&gt;&lt;dataSeries nameId=\"2021-12-07T14-42-20Z\" description=\"\" unit=\"CSV\" repeat=\"0\"&gt;&lt;seriesValueSet&gt;&lt;stringValue mapId=\"\"&gt;Elapsed time [ms];Target temperature [1/100°C];Current temperature [1/100°C];Lid temperature [1/100°C] 170;2407;2402;2354 1180;2437;2430;2362 2172;2467;2463;2388 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5592 &lt;/stringValue&gt;&lt;/seriesValueSet&gt;&lt;/dataSeries&gt;&lt;/experimentStep&gt;&lt;labwareInfo&gt;&lt;standardPlate name=\"\" identification=\"\" labwareTypeId=\"\" labwareTypeName=\"\" labwareDefinitionSource=\"Other\" /&gt;&lt;/labwareInfo&gt;&lt;deviceMetadata&gt;&lt;software name=\"\" manufacturer=\"\" version=\"\" /&gt;&lt;identification productName=\"\" productNumber=\"\" manufacturer=\"\" firmwareVersion=\"\" serialNumber=\"\" /&gt;&lt;/deviceMetadata&gt;&lt;/containerData&gt;</AnyData></ResponseData>");
      l_strFullPathResultXML = Translate("**** xml traced in simulation mode only****");
      l_strResultXML_DataOfLastRun = Translate("<?xml version=\"1.0\" encoding=\"utf-8\"?><ResponseData xmlns:xsi=\"http://www.w3.org/2001/XMLSchema-instance\" xsi:noNamespaceSchemaLocation=\"ResponseType_1.2.xsd\"><AnyData>&lt;?xml version=\"1.0\" encoding=\"utf-8\"?&gt;&lt;containerData xmlns:xsi=\"http://www.w3.org/2001/XMLSchema-instance\" xsi:noNamespaceSchemaLocation=\"DataCapture_1.0.xsd\" version=\"1.0\"&gt;&lt;experimentStep name=\"Temperature Trace\" sequence=\"0\" type=\"Measurement\"&gt;&lt;dataSeries nameId=\"2021-12-07T14-42-20Z\" description=\"\" unit=\"CSV\" repeat=\"0\"&gt;&lt;seriesValueSet&gt;&lt;stringValue mapId=\"\"&gt;Elapsed time [ms];Target temperature [1/100°C];Current temperature [1/100°C];Lid temperature [1/100°C] 170;2407;2402;2354 1180;2437;2430;2362 2172;2467;2463;2388 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5592 &lt;/stringValue&gt;&lt;/seriesValueSet&gt;&lt;/dataSeries&gt;&lt;/experimentStep&gt;&lt;labwareInfo&gt;&lt;standardPlate name=\"\" identification=\"\" labwareTypeId=\"\" labwareTypeName=\"\" labwareDefinitionSource=\"Other\" /&gt;&lt;/labwareInfo&gt;&lt;deviceMetadata&gt;&lt;software name=\"\" manufacturer=\"\" version=\"\" /&gt;&lt;identification productName=\"\" productNumber=\"\" manufacturer=\"\" firmwareVersion=\"\" serialNumber=\"\" /&gt;&lt;/deviceMetadata&gt;&lt;/containerData&gt;</AnyData></ResponseData>");
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strResultXML_DataOfLastRun : "), l_strResultXML_DataOfLastRun);
    l_blnReturnValue = _GetDataFromLastRun_ExportData(l_strResultXML_DataOfLastRun, i_strNameOfODTCProtocol, l_strFullPathFileODTCReport);
    if (l_blnReturnValue == ASWGLOBAL::BOOL::TRUE)
    {
      l_strDisplayTextToStatusWindow = StrConcat12(Translate("Data of running protocol was exported and will be converted into following excel file : \n"), Translate(""), Translate(" A xls file will be generated at Logfiles folder : \n"), l_strFullPathFileODTCReport, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    else
    {
      l_strDisplayTextToStatusWindow = StrConcat12(Translate("An error accurred during extract data from last run."), Translate(""), Translate("Data of running protocol was not exported. "), Translate(""), Translate("Workflow will continue without interruption."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_strResultXML_DataOfLastRun : "), l_strResultXML_DataOfLastRun);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _GetDataFromLastRun_ExportData( variable i_strResultOfLastRunODTC, variable i_strNameOfProtocolPerfromedODTC, variable & o_strFullPathExportedDataODTC ) variable {
    private variable l_intStartIndex;
    private variable l_intStartKeyLength;
    private variable l_strCurrentDataSet;
    private variable l_intCount;
    private variable l_intLoopCounterDataSets;
    private variable l_intNumberOfDataSets;
    private variable l_strEndKey;
    private variable l_intEndIndex;
    private variable l_strStartKey;
    private variable l_strMessageODTCGetLastData;
    private variable l_strAllValues;
    private variable l_intNumberOfData;
    private variable l_arrStrTargetTemps[];
    private variable l_arrStrCurrentData[];
    private variable l_arrStrElapsedTimes[];
    private variable l_arrStrLidTemps[];
    private variable l_arrStrCurrentTemps[];
    private variable l_arrStrAllValues[];
    private variable l_strCurrentTime;
    private variable l_strCurrentDate;
    private variable l_fltCurrentReachedLidTemerpature;
    private variable l_strFullPathFileODTCReport;
    private variable l_fltCurrentElapsedTime;
    private variable l_fltCurrentTargetBlockTemperature;
    private variable l_intIndexOfDataSets;
    private variable l_fltCurrentReachedBlockTemperature;
    private file hdl_ODTCReportFile;
    private variable l_strModyfiedFileName;
    private variable l_strComment;
    o_strFullPathExportedDataODTC = 0;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strMessageODTCGetLastData = i_strResultOfLastRunODTC;
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate("Last Protocol performed on ODTC : "), i_strNameOfProtocolPerfromedODTC, Translate(". Last xml file response od ODTC : "), i_strResultOfLastRunODTC, Translate("."), Translate(""));
    onerror goto errLabel_4 ;
    err.Clear();
    l_arrStrElapsedTimes.SetSize(0);
    l_arrStrTargetTemps.SetSize(0);
    l_arrStrCurrentTemps.SetSize(0);
    l_arrStrLidTemps.SetSize(0);
    l_strStartKey = Translate("Lid temperature [1/100");
    l_intStartIndex = StrFind(i_strResultOfLastRunODTC, l_strStartKey);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intStartIndex (-1 = value not found within string) : "), l_intStartIndex);
    if (l_intStartIndex == -1)
    {
      l_strMessageODTCGetLastData = StrConcat2(Translate("An error occurred during get last data command - no xls export file will be generated."), Translate(" START INDEX NOT FOUND WITHIN STRING OF ODTC RESPONSE."));
      VectorCustomDialogs::MessageDialog(Translate("Get last data from xml file of ODTC"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 5, l_strMessageODTCGetLastData);
    }
    l_intStartKeyLength = StrGetLength(l_strStartKey);
    l_intStartKeyLength = l_intStartKeyLength + 4;
    l_intStartIndex = l_intStartIndex + l_intStartKeyLength;
    l_strEndKey = Translate("lt;/stringValue");
    l_intEndIndex = StrFind(i_strResultOfLastRunODTC, l_strEndKey);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intEndIndex (-1 = value not found within string) : "), l_intEndIndex);
    if (l_intEndIndex == -1)
    {
      l_strMessageODTCGetLastData = StrConcat2(Translate("An error occurred during get last data command - no xls export file will be generated."), Translate(" END INDEX NOT FOUND WITHIN STRING OF ODTC RESPONSE."));
      VectorCustomDialogs::MessageDialog(Translate("Get last data from xml file of ODTC"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 5, l_strMessageODTCGetLastData);
    }
    l_intEndIndex = l_intEndIndex - 2;
    l_intCount = l_intEndIndex - l_intStartIndex;
    l_intCount = l_intCount + 1;
    l_strAllValues = StrMid(i_strResultOfLastRunODTC, l_intStartIndex, l_intCount);
    StrTrimLeft(l_strAllValues, Translate(""));
    StrTrimRight(l_strAllValues, Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_strAllValues: "), l_strAllValues);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
    {
      l_arrStrAllValues = HSLExtensions::String::Split(l_strAllValues, Translate(" "), ASWGLOBAL::BOOL::FALSE);
    }
    else
    {
      l_arrStrAllValues = HSLExtensions::String::Split(l_strAllValues, Translate("\n"), ASWGLOBAL::BOOL::FALSE);
    }
    l_intNumberOfDataSets=l_arrStrAllValues.GetSize();
    {
      for(l_intLoopCounterDataSets = 0; l_intLoopCounterDataSets < l_intNumberOfDataSets;)
      {
        l_intLoopCounterDataSets = l_intLoopCounterDataSets + 1;
        l_strCurrentDataSet=l_arrStrAllValues.GetAt(l_intLoopCounterDataSets-1);
        l_arrStrCurrentData = HSLExtensions::String::Split(l_strCurrentDataSet, Translate(";"), ASWGLOBAL::BOOL::TRUE);
        l_intNumberOfData=l_arrStrCurrentData.GetSize();
        if (l_intNumberOfData != 4)
        {
          l_strMessageODTCGetLastData = StrConcat2(Translate("An error occurred during get last data command - no xls export file will be generated."), Translate(" ARRAY SIZE OF DATA SET IS NOT EQUAL TO 4."));
          VectorCustomDialogs::MessageDialog(Translate("Get last data from xml file of ODTC"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 5, l_strMessageODTCGetLastData);
        }
        l_fltCurrentElapsedTime = StrFVal(l_arrStrCurrentData.ElementAt( 1 -1));
        l_fltCurrentElapsedTime = l_fltCurrentElapsedTime / (100 * 1.0);
        l_fltCurrentElapsedTime = MthFFloor(l_fltCurrentElapsedTime);
        l_arrStrElapsedTimes.AddAsLast(l_fltCurrentElapsedTime);
        l_fltCurrentTargetBlockTemperature = StrFVal(l_arrStrCurrentData.ElementAt( 2 -1));
        l_fltCurrentTargetBlockTemperature = l_fltCurrentTargetBlockTemperature / (100 * 1.0);
        l_arrStrTargetTemps.AddAsLast(l_fltCurrentTargetBlockTemperature);
        l_fltCurrentReachedBlockTemperature = StrFVal(l_arrStrCurrentData.ElementAt( 3 -1));
        l_fltCurrentReachedBlockTemperature = l_fltCurrentReachedBlockTemperature / (100 * 1.0);
        l_arrStrCurrentTemps.AddAsLast(l_fltCurrentReachedBlockTemperature);
        l_fltCurrentReachedLidTemerpature = StrFVal(l_arrStrCurrentData.ElementAt( 4 -1));
        l_fltCurrentReachedLidTemerpature = l_fltCurrentReachedLidTemerpature / (100 * 1.0);
        l_arrStrLidTemps.AddAsLast(l_fltCurrentReachedLidTemerpature);
      }
    }
    TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("l_arrStrElapsedTimes: "), l_arrStrElapsedTimes);
    TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("l_arrStrTargetTemps: "), l_arrStrTargetTemps);
    TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("l_arrStrCurrentTemps: "), l_arrStrCurrentTemps);
    TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("l_arrStrLidTemps: "), l_arrStrLidTemps);
    MECC::TraceComment(Translate("\nCHECKCHECK\n"));
    l_strModyfiedFileName = StrConcat2(i_strNameOfProtocolPerfromedODTC, Translate(""));
    l_strCurrentDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    l_strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    l_strFullPathFileODTCReport = StrConcat8(Translate("C:\\Program Files (x86)\\HAMILTON\\LogFiles\\"), l_strCurrentDate, Translate("_"), l_strCurrentTime, Translate("_"), i_strNameOfProtocolPerfromedODTC, Translate(".xls"), Translate(""));
    hdl_ODTCReportFile.AddField("Time in seconds", l_fltCurrentElapsedTime, hslInteger);
    hdl_ODTCReportFile.AddField("Target block temperature in °C", l_fltCurrentTargetBlockTemperature, hslFloat);
    hdl_ODTCReportFile.AddField("Reached block temperature in °C", l_fltCurrentReachedBlockTemperature, hslFloat);
    hdl_ODTCReportFile.AddField("Reached lid temperature in °C", l_fltCurrentReachedLidTemerpature, hslFloat);
    if( 0 == hdl_ODTCReportFile.Open(l_strFullPathFileODTCReport + " " + i_strNameOfProtocolPerfromedODTC, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, l_strFullPathFileODTCReport, "HxMetEdCompCmd");
    }
    l_intNumberOfDataSets=l_arrStrElapsedTimes.GetSize();
    {
      for(l_intIndexOfDataSets = 0; l_intIndexOfDataSets < l_intNumberOfDataSets;)
      {
        l_intIndexOfDataSets = l_intIndexOfDataSets + 1;
        l_fltCurrentElapsedTime=l_arrStrElapsedTimes.GetAt(l_intIndexOfDataSets-1);
        l_fltCurrentTargetBlockTemperature=l_arrStrTargetTemps.GetAt(l_intIndexOfDataSets-1);
        l_fltCurrentReachedBlockTemperature=l_arrStrCurrentTemps.GetAt(l_intIndexOfDataSets-1);
        l_fltCurrentReachedLidTemerpature=l_arrStrLidTemps.GetAt(l_intIndexOfDataSets-1);
        if( 0 == hdl_ODTCReportFile.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != hdl_ODTCReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hdl_ODTCReportFile.RemoveFields();
    o_strFullPathExportedDataODTC = l_strFullPathFileODTCReport;
    return (ASWGLOBAL::BOOL::TRUE);
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }   /* end if from skip handler if no error */
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }
} // library namespace
