#pragma once
#include "HSLStrLib.hsl"
#include "HSLInhecoTEC\\HSLInhecoTECLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLUtilLib.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace INHECOTEC_CONTROLLER {
  variable t_blnSimulationModeON;
  variable t_intTraceLevel;
  variable t_strMethodName;
  variable t_activateIntegratedAbortHandler;
  variable t_strLibraryName;
  variable t_blnInitPerformed;
  variable t_strFunctionName;
  function Init( variable i_blnSimulationModeON, variable i_ActivateIntegratedAbortHandler, variable & o_strNameAndVersion ) variable ;
  function TEC_CheckTemperature( variable i_intTECTemp, variable i_intDeviceID, variable & o_fltTECTempReached ) variable ;
  function TEC_SetTemperature( variable i_intTECTemp, variable i_intDeviceID ) variable ;
  function TEC_Shake( variable i_intTECrpm, variable i_intDeviceID, variable i_intShakerOrientation, variable i_intShakingTime ) variable ;
  function TEC_Terminate(  ) variable ;
  private function _DATA_AppendStatusWindow( variable i_strMessageToAppend ) void ;
  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void ;
  private function _DATA_ShowListDialog( variable i_strLastErrorMessage, variable i_strTopText, variable i_strBottomText, variable i_strDeviceName ) void ;
  private function _TEC_ReportErrorText( variable i_strErrorCode, variable i_strFunctionName, variable i_blnHandleSuccess ) variable ;
  private function _Version(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function Init( variable i_blnSimulationModeON, variable i_ActivateIntegratedAbortHandler, variable & o_strNameAndVersion ) variable {
    private variable l_strInitTEC;
    private variable l_strErrorCode;
    private variable l_strLastError;
    private variable l_intControllerID;
    private variable l_intControllerType;
    private variable l_strDeviceIdentified;
    private variable l_intDeviceType;
    private variable l_arrDevices[];
    private variable l_intDeviceCounter;
    private variable l_intDeviceID;
    private variable l_intArrayIndex;
    private variable l_strMessage;
    private variable l_intSizeOfArray;
    private variable l_arrDeviceIDs[];
    private variable l_intNumberOfSlots;
    private variable l_strControllerType;
    private variable l_intRetValFindSubString;
    private variable l_strFirmWareVersion_Hardware;
    private variable l_strFirmWareVersion_SerialNumber;
    private variable l_strFirmWareVersion_Copyright;
    private variable l_strFirmWareVersion_Application;
    private variable l_strFirmWareVersion_Bootstrap;
    private variable l_strCalibrationDate;
    private variable l_strRuntime;
    private variable l_strDeviceSerialNumber;
    private variable l_blnBindRetunValueSuccess;
    private variable l_strDescription;
    private variable l_str_ReturnNameAndVersion;
    private variable l_strControllerVersion;
    private variable l_strComment;
    private variable l_blnSuccess;
    private variable t_strLibraryNameWithoutExtension;
    o_strNameAndVersion = 0;
    t_intTraceLevel = TRACELEVEL::GetTraceLevel();
    t_strMethodName = Translate("");
    t_strMethodName = GetMethodFileName();
    t_strLibraryName = Translate("");
    t_strFunctionName = Translate("");
    l_strControllerVersion = Translate("");
    l_str_ReturnNameAndVersion = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    l_strControllerVersion = "0.1.7";
    l_str_ReturnNameAndVersion = StrConcat8(t_strFunctionName, " ",t_strLibraryName, " ", l_strControllerVersion, "", "", "");
    t_strLibraryNameWithoutExtension = HSLExtensions::File::GetFileNameWithoutExtension(t_strLibraryName);
    o_strNameAndVersion = StrConcat4(t_strLibraryNameWithoutExtension, Translate(" "), l_strControllerVersion, Translate(""));
    l_strDescription = o_strNameAndVersion;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strDescription);
    t_activateIntegratedAbortHandler = i_ActivateIntegratedAbortHandler;
    l_intControllerID = 0;
    l_strErrorCode = Translate("");
    t_blnSimulationModeON = Util::GetSimulationMode();
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      t_blnSimulationModeON = i_blnSimulationModeON;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("t_blnSimulationModeON : "), t_blnSimulationModeON);
    _DATA_AppendStatusWindow(Translate("INIT TEC controller"));
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      HSLInhecoTECLib::EnableCommunicationTrace();
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::Initialize(l_intControllerID, t_blnSimulationModeON, l_strInitTEC);
      if (l_blnBindRetunValueSuccess == ASWGLOBAL::BOOL::FALSE)
      {
        _DATA_ShowListDialog(l_strLastError, Translate("There is an error with the TEC Controller : "), Translate("Make sure the unit is turned on and click OK to try again"), Translate("TEC"));
        l_blnBindRetunValueSuccess = HSLInhecoTECLib::Initialize(l_intControllerID, t_blnSimulationModeON, l_strInitTEC);
        l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Device Type"), l_blnBindRetunValueSuccess);
        if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::SetTraceLevel(t_intTraceLevel);
      HSLInhecoTECLib::GetDeviceType(l_intControllerID, 0, l_intControllerType, l_strErrorCode);
      l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Device Type"), l_blnBindRetunValueSuccess);
      if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::GetFirmwareVersion(l_intControllerID, HSLInhecoTECLib::FIRMWARE_INFO::Application_Version, l_strFirmWareVersion_Application, l_strErrorCode);
      l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Firmware Version - Application Version"), l_blnBindRetunValueSuccess);
      if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::GetFirmwareVersion(l_intControllerID, HSLInhecoTECLib::FIRMWARE_INFO::Bootstrap_Version, l_strFirmWareVersion_Bootstrap, l_strErrorCode);
      l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Firmware Version - Bootstrap Version"), l_blnBindRetunValueSuccess);
      if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::GetFirmwareVersion(l_intControllerID, HSLInhecoTECLib::FIRMWARE_INFO::Copyright, l_strFirmWareVersion_Copyright, l_strErrorCode);
      l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Frimware Version - Copyright"), l_blnBindRetunValueSuccess);
      if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::GetFirmwareVersion(l_intControllerID, HSLInhecoTECLib::FIRMWARE_INFO::Hardware_Version, l_strFirmWareVersion_Hardware, l_strErrorCode);
      l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Firmware Version - Hardware Version"), l_blnBindRetunValueSuccess);
      if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::GetFirmwareVersion(l_intControllerID, HSLInhecoTECLib::FIRMWARE_INFO::Serial_Number, l_strFirmWareVersion_SerialNumber, l_strErrorCode);
      l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Frimware Version - Serial Number"), l_blnBindRetunValueSuccess);
      if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      MECC::TraceComment(Translate("Read TEC data : \n\nController type 0 = STEC or 1 = MTEC ...\n "));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intControllerType : "), l_intControllerType);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strFirmWareVersion_Application : "), l_strFirmWareVersion_Application);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strFirmWareVersion_Bootstrap : "), l_strFirmWareVersion_Bootstrap);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strFirmWareVersion_Hardware : "), l_strFirmWareVersion_Hardware);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strFirmWareVersion_Copyright : "), l_strFirmWareVersion_Copyright);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strFirmWareVersion_SerialNumber : "), l_strFirmWareVersion_SerialNumber);
      if (l_intControllerType == HSLInhecoTECLib::CONTROLLER_TYPE::MTC)
      {
        l_intNumberOfSlots = 6;
        l_strControllerType = "Multi TEC Control";
      }
      if (l_intControllerType == HSLInhecoTECLib::CONTROLLER_TYPE::STC)
      {
        l_intNumberOfSlots = 1;
        l_strControllerType = "Single TEC Control";
      }
      l_arrDevices.SetSize(0);
      l_arrDeviceIDs.SetSize(0);
      {
        for(l_intDeviceCounter = 0; l_intDeviceCounter < l_intNumberOfSlots;)
        {
          l_intDeviceCounter = l_intDeviceCounter + 1;
          l_blnBindRetunValueSuccess = HSLInhecoTECLib::GetDeviceType(l_intControllerID, l_intDeviceCounter, l_intDeviceType, l_strErrorCode);
          l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Device Type"), l_blnBindRetunValueSuccess);
          if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
          l_strDeviceIdentified = "unknown type " + IStr(l_intDeviceType);
          if(l_intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::Thermoshake) l_strDeviceIdentified = "Thermoshake";
          if(l_intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::CPAC) l_strDeviceIdentified = "CPAC";
          if(l_intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::Teleshake) l_strDeviceIdentified = "Teleshake";
          if(l_intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::CPLC) l_strDeviceIdentified = "CPLC";
          if(l_intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::CPAC_2TEC) l_strDeviceIdentified = "CPAC 2TEC";
          if(l_intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::Heat_PAC) l_strDeviceIdentified = "Heat PAC";
          if(l_intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::Cycler) l_strDeviceIdentified = "Cycler";
          if(l_intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::Heated_Lid) l_strDeviceIdentified = "Heated Lid";
          if(l_intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::ACAC) l_strDeviceIdentified = "ACAC";
          if(l_intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::LCAC) l_strDeviceIdentified = "LCAC";
          if(l_intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::CPHF) l_strDeviceIdentified = "CPHF";
          if(l_intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::Thermoshake_AC) l_strDeviceIdentified = "Thermoshake AC";
          if(l_intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::Teleshake_AC) l_strDeviceIdentified = "Teleshake AC";
          if(l_intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::Teleshake_95_AC) l_strDeviceIdentified = "Teleshake 95 AC";
          if(l_intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::CPLC2) l_strDeviceIdentified = "CPLC2";
          if(l_intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::No_Device_Connected) l_strDeviceIdentified = "No device connected";
          if(l_intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::Empty_Slot) l_strDeviceIdentified = "Empty slot";
          l_intRetValFindSubString = StrFind(l_strDeviceIdentified, Translate("unknown type"));
          if (l_intRetValFindSubString < 0)
          {
            l_arrDeviceIDs.AddAsLast(l_intDeviceCounter);
          }
          l_arrDevices.AddAsLast(l_strDeviceIdentified);
          l_blnBindRetunValueSuccess = HSLInhecoTECLib::GetDeviceSerialNumber(l_intControllerID, l_intDeviceCounter, l_strDeviceSerialNumber, l_strErrorCode);
          l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Device Serial Number"), l_blnBindRetunValueSuccess);
          if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
          l_blnBindRetunValueSuccess = HSLInhecoTECLib::GetCalibrationDate(l_intControllerID, l_intDeviceCounter, l_strCalibrationDate, l_strErrorCode);
          l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Calibration Date"), l_blnBindRetunValueSuccess);
          if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
          l_blnBindRetunValueSuccess = HSLInhecoTECLib::GetDeviceRuntime(l_intControllerID, l_intDeviceCounter, l_strRuntime, l_strErrorCode);
          l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Runtime"), l_blnBindRetunValueSuccess);
          if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intDeviceCounter : "), l_intDeviceCounter);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strDeviceIdentified : "), l_strDeviceIdentified);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strDeviceSerialNumber : "), l_strDeviceSerialNumber);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strRuntime : "), l_strRuntime);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strCalibrationDate : "), l_strCalibrationDate);
        }
      }
      l_intSizeOfArray=l_arrDeviceIDs.GetSize();
      {
        for(l_intArrayIndex = 0; l_intArrayIndex < l_intSizeOfArray;)
        {
          l_intArrayIndex = l_intArrayIndex + 1;
          l_strDeviceIdentified=l_arrDevices.GetAt(l_intArrayIndex-1);
          l_intDeviceID=l_arrDeviceIDs.GetAt(l_intArrayIndex-1);
          l_strMessage = StrConcat8(Translate(""), Translate(" Inheco TEC Device ID : "), l_intDeviceID, Translate(" has been identified as type of "), l_strDeviceIdentified, Translate(". "), Translate(""), Translate(""));
          _DATA_AppendStatusWindow(l_strMessage);
        }
      }
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - TEC INIT simulated"));
    }
    t_blnInitPerformed = ASWGLOBAL::BOOL::TRUE;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function TEC_SetTemperature( variable i_intTECTemp, variable i_intDeviceID ) variable {
    private variable l_strErrorCode;
    private variable l_fltTECTemperature;
    private variable l_strDisplayTextToStatusWindow;
    private variable l_fltActualTemperatureTEC;
    private variable l_intControllerID;
    private variable l_blnBindRetunValueSuccess;
    private variable l_strComment;
    private variable l_blnSuccess;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_intControllerID = 0;
    l_strErrorCode = Translate("");
    l_strDisplayTextToStatusWindow = StrConcat4(Translate("Set temperature of TEC to : "), i_intTECTemp, Translate(" °C."), Translate(" Adjusting temperature of module started..."));
    l_strDisplayTextToStatusWindow = StrConcat4(l_strDisplayTextToStatusWindow, Translate(" of Device ID : "), i_intDeviceID, Translate("."));
    _DATA_AppendStatusWindow(l_strDisplayTextToStatusWindow);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::GetActualDeviceTemperature(l_intControllerID, i_intDeviceID, 1, l_fltActualTemperatureTEC, l_strErrorCode);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_fltActualTemperatureTEC : "), l_fltActualTemperatureTEC);
      l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Acutal Device Temperature"), l_blnBindRetunValueSuccess);
      if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      l_fltTECTemperature = i_intTECTemp / (1.0 * 1.0);
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::SetTargetTemperature(l_intControllerID, i_intDeviceID, l_fltTECTemperature, l_strErrorCode);
      l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Set Target Temperature"), l_blnBindRetunValueSuccess);
      if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Set temperature to l_fltTECTemperature : "), l_fltTECTemperature);
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::StartTemperatureControl(l_intControllerID, i_intDeviceID, l_strErrorCode);
      l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Start Temperature Control"), l_blnBindRetunValueSuccess);
      if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - TEC set temperature"));
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function TEC_Terminate(  ) variable {
    private variable l_strErrorCode;
    private variable i_intDeviceIDsPossible;
    private variable l_intControllerID;
    private variable l_blnBindRetunValueSuccess;
    private variable l_strComment;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    if (t_blnInitPerformed == ASWGLOBAL::BOOL::FALSE)
    {
      MECC::TraceComment(Translate("This step was introduced to avoid terminating a device without having initialized it in prior.\nThis may happen if a run is aborted and the init step was not called before --> on abort handler might still call terminate command.."));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_intControllerID = 0;
    l_strErrorCode = Translate("");
    _DATA_AppendStatusWindow(Translate("Terminate TEC controller"));
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      MECC::TraceComment(Translate("It is unknown how many devices are adressed using the MTEC controller - I am trying to stop temperature controll of a 6 possible devices during terminate command"));
      {
        for(i_intDeviceIDsPossible = 0; i_intDeviceIDsPossible < 6;)
        {
          i_intDeviceIDsPossible = i_intDeviceIDsPossible + 1;
          onerror goto errLabel_1 ;
          err.Clear();
          l_blnBindRetunValueSuccess = HSLInhecoTECLib::StopTemperatureControl(l_intControllerID, i_intDeviceIDsPossible, l_strErrorCode);
          errLabel_1 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
        }
      }
      HSLInhecoTECLib::Terminate(ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - TEC termination"));
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _TEC_ReportErrorText( variable i_strErrorCode, variable i_strFunctionName, variable i_blnHandleSuccess ) variable {
    private variable l_strDecodedErrorText;
    private variable l_strErrorMessage;
    private variable l_strLastError;
    if (i_blnHandleSuccess == ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::TRUE);
    }
    if (i_blnHandleSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Affected command : "), i_strFunctionName);
      HSLInhecoTECLib::GetLastError(l_strLastError);
      HSLInhecoTECLib::GetDescriptionForErrorCode(i_strErrorCode, l_strDecodedErrorText);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_strErrorCode : "), i_strErrorCode);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strLastError : "), l_strLastError);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strDecodedErrorText : "), l_strDecodedErrorText);
      l_strErrorMessage = StrConcat4(Translate("TEC_Report Error handler extracted the last error : "), l_strLastError, Translate(". Decoded Error message : "), l_strDecodedErrorText);
      _DATA_IntegratedAbortHandler(i_strFunctionName, l_strErrorMessage);
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, i_strFunctionName, t_strLibraryName, l_strErrorMessage);
      return (ASWGLOBAL::BOOL::FALSE);
    }
  }

  private function _Version(  ) void {
  }

  function TEC_CheckTemperature( variable i_intTECTemp, variable i_intDeviceID, variable & o_fltTECTempReached ) variable {
    private variable l_strErrorCode;
    private variable l_strGetTypeOfCurrentVariable;
    private variable l_intReturnValue_TECcheckTemperature;
    private timer l_hdlTimerWait10seconds;
    private variable l_intCountTrialsToReachRequestedTemperature;
    private variable l_strDisplayTextToStatusWindow;
    private variable l_strTemperature;
    private variable l_strTECTemp;
    private variable l_fltActualTemperatureTEC;
    private variable l_strActualTemperatureTEC;
    private variable l_strDisplayTextToListDialog;
    private variable l_intControllerID;
    private variable l_blnBindRetunValueSuccess;
    private variable l_strComment;
    private variable l_blnSuccess;
    o_fltTECTempReached = 0;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strDisplayTextToStatusWindow = StrConcat4(Translate("Check temperature of TEC to : "), i_intTECTemp, Translate(" °C."), Translate(" Request temperature of module started..."));
    l_strDisplayTextToStatusWindow = StrConcat4(l_strDisplayTextToStatusWindow, Translate(" of Device ID : "), i_intDeviceID, Translate("."));
    _DATA_AppendStatusWindow(l_strDisplayTextToStatusWindow);
    l_intControllerID = 0;
    l_strErrorCode = Translate("");
    if (t_blnSimulationModeON == 0)
    {
      l_fltActualTemperatureTEC = 0.0;
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::GetActualDeviceTemperature(l_intControllerID, i_intDeviceID, 1, l_fltActualTemperatureTEC, l_strErrorCode);
      l_strGetTypeOfCurrentVariable = StrGetType(l_fltActualTemperatureTEC);
      o_fltTECTempReached = l_fltActualTemperatureTEC;
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Requested temperature : "), i_intTECTemp);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Actual temperature : "), l_fltActualTemperatureTEC);
      l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get actual device temperature"), l_blnBindRetunValueSuccess);
      if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      if (i_intTECTemp > 0)
      {
        {
          l_intCountTrialsToReachRequestedTemperature = 0;
          while (l_fltActualTemperatureTEC > i_intTECTemp)
          {
            l_intCountTrialsToReachRequestedTemperature = l_intCountTrialsToReachRequestedTemperature + 1;
            if( 0 == l_hdlTimerWait10seconds.SetTimer(10) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == l_hdlTimerWait10seconds.WaitTimer(hslFalse, hslFalse) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            l_blnBindRetunValueSuccess = HSLInhecoTECLib::GetActualDeviceTemperature(l_intControllerID, i_intDeviceID, 1, l_fltActualTemperatureTEC, l_strErrorCode);
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_fltActualTemperatureTEC : "), l_fltActualTemperatureTEC);
            o_fltTECTempReached = l_fltActualTemperatureTEC;
            l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Actual Device Temperature"), l_blnBindRetunValueSuccess);
            if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            l_strTemperature = StrFStr(l_fltActualTemperatureTEC);
            StrReplace(l_strTemperature, Translate("0000"), Translate(""));
            l_strDisplayTextToStatusWindow = StrConcat8(Translate("TEC check temperature. Actual temperature : "), l_strTemperature, Translate(" °C. Requested temperature : "), i_intTECTemp, Translate(" °C. Adjusting temperature of TEC."), Translate(""), Translate(""), Translate(""));
            _DATA_AppendStatusWindow(l_strDisplayTextToStatusWindow);
            if (l_intCountTrialsToReachRequestedTemperature > 60)
            {
              l_strTECTemp = StrIStr(i_intTECTemp);
              l_strTECTemp = StrConcat2(Translate("TEC requested temperature [°C] : "), l_strTECTemp);
              l_strActualTemperatureTEC = StrFStr(l_fltActualTemperatureTEC);
              l_strActualTemperatureTEC = StrConcat2(Translate("TEC reached temperature [°C] : "), l_fltActualTemperatureTEC);
              l_strDisplayTextToListDialog = StrConcat4(l_strTECTemp, Translate(" vs. "), l_strActualTemperatureTEC, Translate(""));
              _DATA_ShowListDialog(l_strDisplayTextToListDialog, Translate("TEC Controller requests User interaction : "), Translate("It is taking a long time for the TEC to reach temperature. Click Cancel to abort the method OR OK to try to recover the method"), Translate("TEC"));
              l_intReturnValue_TECcheckTemperature = VectorCustomDialogs::MessageDialog(Translate("TEC recovery options"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Press YES to wait for the TEC to reach the requested temperature OR NO to continue the Assay without waiting for TEC to reach desired temperature."));
              if (l_intReturnValue_TECcheckTemperature == ASWGLOBAL::DIALOG::NO)
              {
                break;
              }
            }
          }
        }
      }
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - TEC check Temperature minimum simulated"));
      o_fltTECTempReached = i_intTECTemp;
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void {
    private variable l_strAffectedLibrary;
    private variable l_strAbortMessage;
    private variable l_arrListAbortHandlerMessage[];
    private variable l_strFunctionName;
    private variable l_strComment;
    if (t_activateIntegratedAbortHandler == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strFunctionName = Translate("");
    l_strComment = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, l_strComment);
    VectorCustomDialogs::Initialize();
    l_strAffectedLibrary = StrConcat2(Translate("Affected library :    "), i_strFunctionName);
    l_strAbortMessage = StrConcat2(Translate("Message : "), i_strAbortMessage);
    l_arrListAbortHandlerMessage.SetSize(0);
    l_arrListAbortHandlerMessage.AddAsLast(l_strAffectedLibrary);
    l_arrListAbortHandlerMessage.AddAsLast(l_strAbortMessage);
    VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Internal abort handler activated - error occurred - abort routine started"), Translate("Press OK to Abort the run."), l_arrListAbortHandlerMessage);
    TEC_Terminate();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, i_strAbortMessage);
    abort;
  }

  private function _DATA_ShowListDialog( variable i_strLastErrorMessage, variable i_strTopText, variable i_strBottomText, variable i_strDeviceName ) void {
    private variable l_strLastError;
    private variable l_intReturnValueDialog;
    private variable l_arrListTECMessage[];
    private variable l_strDialogTitle;
    l_strDialogTitle = StrConcat2(i_strDeviceName, Translate(" - inferface "));
    l_strLastError = StrConcat2(Translate("TEC error description : "), i_strLastErrorMessage);
    l_arrListTECMessage.SetSize(0);
    l_arrListTECMessage.AddAsLast(l_strLastError);
    onerror goto errLabel_2 ;
    err.Clear();
    l_intReturnValueDialog = VectorCustomDialogs::ListDialog(l_strDialogTitle, VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, i_strTopText, i_strBottomText, l_arrListTECMessage);
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      VectorCustomDialogs::Initialize();
      l_intReturnValueDialog = VectorCustomDialogs::ListDialog(l_strDialogTitle, VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, i_strTopText, i_strBottomText, l_arrListTECMessage);
    }   /* end if from skip handler if no error */
    if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
    {
      MECC::TraceComment(Translate("************  Method will continue - USER confirmed dialog with OK ************"));
    }
  }

  private function _DATA_AppendStatusWindow( variable i_strMessageToAppend ) void {
    onerror goto errLabel_3 ;
    err.Clear();
    VectorCustomDialogs::AppendStatusText(i_strMessageToAppend);
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      VectorCustomDialogs::Initialize();
      VectorCustomDialogs::ShowStatusDialog(Translate("TEC controller"));
      VectorCustomDialogs::AppendStatusText(i_strMessageToAppend);
    }   /* end if from skip handler if no error */
  }

  function TEC_Shake( variable i_intTECrpm, variable i_intDeviceID, variable i_intShakerOrientation, variable i_intShakingTime ) variable {
    private variable l_strErrorCode;
    private variable l_strDisplayTextToStatusWindow;
    private variable l_strShakerOrientation;
    private timer l_hdlTimerWaitShakingTime;
    private variable l_intControllerID;
    private variable l_intStatus;
    private variable l_intDeviceType;
    private variable l_strDeviceSerialNumber;
    private variable l_intShakerStatus;
    private variable l_blnBindRetunValueSuccess;
    private variable loopCounter1;
    private variable l_strComment;
    private variable l_blnSuccess;
    private variable l_intReturnValue;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_intControllerID = 0;
    l_strErrorCode = Translate("");
    if (i_intShakerOrientation == 0)
    {
      l_strShakerOrientation = Translate("Circle anticlockwise");
    }
    if (i_intShakerOrientation == 1)
    {
      l_strShakerOrientation = Translate("Circle clockwise");
    }
    if (i_intShakerOrientation == 2)
    {
      l_strShakerOrientation = Translate("Move up-left-down-right");
    }
    if (i_intShakerOrientation == 3)
    {
      l_strShakerOrientation = Translate("Move up-right-down-left");
    }
    if (i_intShakerOrientation == 4)
    {
      l_strShakerOrientation = Translate("Move up-down");
    }
    if (i_intShakerOrientation == 5)
    {
      l_strShakerOrientation = Translate("Move left-right");
    }
    l_strDisplayTextToStatusWindow = StrConcat4(Translate("Shaking of TEC with : "), i_intTECrpm, Translate(" rpm using orientation. "), l_strShakerOrientation);
    l_strDisplayTextToStatusWindow = StrConcat4(l_strDisplayTextToStatusWindow, Translate(" of Device ID : "), i_intDeviceID, Translate("."));
    _DATA_AppendStatusWindow(l_strDisplayTextToStatusWindow);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::GetDeviceSerialNumber(l_intControllerID, i_intDeviceID, l_strDeviceSerialNumber, l_strErrorCode);
      l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Device Serial Number"), l_blnBindRetunValueSuccess);
      if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::GetDeviceType(l_intControllerID, i_intDeviceID, l_intDeviceType, l_strErrorCode);
      l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Device Type"), l_blnBindRetunValueSuccess);
      if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::GetShakerStatus(l_intControllerID, i_intDeviceID, l_intShakerStatus, l_strErrorCode);
      l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Shaker Status"), l_blnBindRetunValueSuccess);
      if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intShakerStatus : "), l_intShakerStatus);
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::SetShakerRevolutions(l_intControllerID, i_intDeviceID, i_intTECrpm, l_strErrorCode);
      l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Set Shaker Revolutions"), l_blnBindRetunValueSuccess);
      if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      onerror goto errLabel_4 ;
      err.Clear();
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::SetShakerShape(l_intControllerID, i_intDeviceID, i_intShakerOrientation, l_strErrorCode);
      errLabel_4 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        MECC::TraceComment(Translate("The device does not support to set a shaker shape"));
      }   /* end if from skip handler if no error */
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::StartShaker(l_intControllerID, i_intDeviceID, l_strErrorCode);
      l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Start Shaker"), l_blnBindRetunValueSuccess);
      if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          if( 0 == l_hdlTimerWaitShakingTime.SetTimer(6) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_intReturnValue = l_hdlTimerWaitShakingTime.WaitTimer(hslFalse, hslFalse);
          if (0 == l_intReturnValue)
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if (l_intReturnValue == 3)
          {
            _DATA_AppendStatusWindow(Translate("User stopped timer manually"));
          }
          l_blnBindRetunValueSuccess = HSLInhecoTECLib::GetShakerStatus(l_intControllerID, i_intDeviceID, l_intStatus, l_strErrorCode);
          l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Shaker Status"), l_blnBindRetunValueSuccess);
          if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intShakerStatus : "), l_intShakerStatus);
          if (l_intStatus == 1)
          {
            break;
          }
        }
      }
      if( 0 == l_hdlTimerWaitShakingTime.SetTimer(i_intShakingTime) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == l_hdlTimerWaitShakingTime.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      l_blnBindRetunValueSuccess = HSLInhecoTECLib::StopShaker(l_intControllerID, i_intDeviceID, l_strErrorCode);
      l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Stop Shaker"), l_blnBindRetunValueSuccess);
      if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          if( 0 == l_hdlTimerWaitShakingTime.SetTimer(6) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_hdlTimerWaitShakingTime.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_blnBindRetunValueSuccess = HSLInhecoTECLib::GetShakerStatus(l_intControllerID, i_intDeviceID, l_intStatus, l_strErrorCode);
          l_blnSuccess = _TEC_ReportErrorText(l_strErrorCode, Translate("Get Shaker Status"), l_blnBindRetunValueSuccess);
          if (l_blnSuccess == ASWGLOBAL::BOOL::FALSE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intShakerStatus : "), l_intShakerStatus);
          if (l_intStatus == 0)
          {
            break;
          }
        }
      }
    }
    else
    {
      MECC::TraceComment(Translate("SIMULATION MODE ON - TEC set temperature"));
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }
} // library namespace
