#pragma once
#include "HSLStrLib.hsl"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLDevLib.hsl"
#include "InstrumentTypeHelper.hsl"
#include "HSLSensorLib.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLUtilLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace LIQUIDWASTE_CONTROLLER {
  variable t_intTraceLevel;
  variable t_intPlatformType;
  variable t_strLibraryName;
  variable t_activateIntegratedAbortHandler;
  variable t_strFunctionName;
  function Init( device & ML_STAR, variable i_blnSimulationModeON, variable i_intComPortSensor, variable i_ActivateIntegratedAbortHandler, variable & o_strNameAndVersion ) variable ;
  private function _CheckSytemConnected( device & ML_STAR ) void ;
  private function _DATA_AppendStatusWindow( variable i_strMessageToAppend ) void ;
  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void ;
  private function _DATA_ShowListDialog( variable i_strLastErrorMessage, variable i_strTopText, variable i_strBottomText, variable i_strDeviceName ) void ;
  private function _VersionHistory(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function Init( device & ML_STAR, variable i_blnSimulationModeON, variable i_intComPortSensor, variable i_ActivateIntegratedAbortHandler, variable & o_strNameAndVersion ) variable {
    private variable l_strReturnValueFillingState;
    private variable l_strReturnValueCapMounting;
    private variable l_blnStatusBottleFilling;
    private variable l_blnStatusCapMounting;
    private variable l_intInitTrials;
    private variable l_blnSuccess;
    private variable l_str_ReturnNameAndVersion;
    private variable l_strControllerVersion;
    private variable l_strComment;
    private variable t_blnSimulationModeON;
    private variable l_strDescription;
    private variable t_strLibraryNameWithoutExtension;
    o_strNameAndVersion = 0;
    t_intTraceLevel = TRACELEVEL::GetTraceLevel();
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("t_intTraceLevel : "), t_intTraceLevel);
    t_strLibraryName = Translate("");
    t_strFunctionName = Translate("");
    l_strControllerVersion = Translate("");
    l_str_ReturnNameAndVersion = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    l_strControllerVersion = "0.4.5";
    t_strLibraryNameWithoutExtension = HSLExtensions::File::GetFileNameWithoutExtension(t_strLibraryName);
    o_strNameAndVersion = StrConcat4(t_strLibraryNameWithoutExtension, Translate(" "), l_strControllerVersion, Translate(""));
    l_strDescription = o_strNameAndVersion;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strDescription);
    _DATA_AppendStatusWindow(t_strFunctionName);
    t_activateIntegratedAbortHandler = i_ActivateIntegratedAbortHandler;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_ActivateIntegratedAbortHandler : "), t_activateIntegratedAbortHandler);
    _CheckSytemConnected(ML_STAR);
    t_blnSimulationModeON = Util::GetSimulationMode();
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::FALSE)
    {
      t_blnSimulationModeON = i_blnSimulationModeON;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("t_blnSimulationModeON : "), t_blnSimulationModeON);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("\nLiquid waste system simulated.....\n\n"));
      _DATA_AppendStatusWindow(Translate("Liquid waste simulated."));
    }
    else
    {
      if (t_intPlatformType == 0)
      {
        {
          for(l_intInitTrials = 0; l_intInitTrials < 2;)
          {
            l_intInitTrials = l_intInitTrials + 1;
            MECC::TraceComment(Translate("Platform type detection responds a STARline based platform."));
            l_blnSuccess = SensorLib::Initialize(i_intComPortSensor);
            if (l_blnSuccess == ASWGLOBAL::BOOL::TRUE)
            {
              l_blnStatusBottleFilling = SensorLib::CheckLiquid();
              if (l_blnStatusBottleFilling == 0)
              {
                MECC::TraceComment(Translate("liquid waste bottle full and needs to be emptied"));
                _DATA_AppendStatusWindow(Translate("Liquid waste bottle full and needs to be emptied"));
                _DATA_ShowListDialog(Translate("Filling state error"), Translate("Liquid waste check"), Translate("check bottle and empty it"), Translate("Liquid waste system"));
                l_blnStatusBottleFilling = SensorLib::CheckLiquid();
                if (l_blnStatusBottleFilling == 0)
                {
                  _DATA_IntegratedAbortHandler(Translate("Liquid waste bottle filling state"), Translate("The bottle is still filled - check your system. The method will abort after pressing OK"));
                  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("The bottle is still filled - check your system. The method will abort after pressing OK"));
                  return (ASWGLOBAL::BOOL::FALSE);
                }
              }
              else
              {
                MECC::TraceComment(Translate("liquid waste bottle empty"));
                _DATA_AppendStatusWindow(Translate("Liquid waste bottle empty"));
              }
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_blnStatusBottleFilling : "), l_blnStatusBottleFilling);
              break;
            }
            else
            {
              _DATA_AppendStatusWindow(Translate("Init of HSL SensorLib failed - check COM port settings within code Or cable connection."));
              _DATA_ShowListDialog(Translate("INIT error"), Translate("Liquid waste check"), Translate("Init of HSL SensorLib failed - check COM port settings within code Or cable connection."), Translate("Liquid waste system"));
              if (l_intInitTrials == 2)
              {
                _DATA_IntegratedAbortHandler(Translate("Liquid waste INIT"), Translate("The INIT of the sensor failed - check your system. The method will abort after pressing OK"));
                TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("The INIT of the sensor failed - check your system. The method will abort after pressing OK"));
                return (ASWGLOBAL::BOOL::FALSE);
              }
            }
          }
        }
      }
      if (t_intPlatformType == 1)
      {
        MECC::TraceComment(Translate("Platform type detection responds a STARVline based platform."));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	l_strReturnValueCapMounting = arrRetValues[3];
        }
        l_blnStatusCapMounting = StrRight(l_strReturnValueCapMounting, 1);
        l_blnStatusCapMounting = StrIVal(l_blnStatusCapMounting);
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	l_strReturnValueFillingState = arrRetValues[3];
        }
        l_blnStatusBottleFilling = StrRight(l_strReturnValueFillingState, 1);
        l_blnStatusBottleFilling = StrIVal(l_blnStatusBottleFilling);
        if (l_blnStatusCapMounting == 1)
        {
          MECC::TraceComment(Translate("Cap mounted correct at liquid waste"));
          _DATA_AppendStatusWindow(Translate("Liquid waste cap detected"));
        }
        else
        {
          MECC::TraceComment(Translate("Cap mounted incorrect at liquid waste"));
          _DATA_AppendStatusWindow(Translate("Liquid waste cap not detected"));
          _DATA_ShowListDialog(Translate("Cap mounting error"), Translate("Liquid waste check"), Translate("check mountig of cap"), Translate("Liquid waste system"));
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
            	l_strReturnValueCapMounting = arrRetValues[3];
          }
          l_blnStatusCapMounting = StrRight(l_strReturnValueCapMounting, 1);
          l_blnStatusCapMounting = StrIVal(l_blnStatusCapMounting);
          if (l_blnStatusCapMounting == 0)
          {
            _DATA_IntegratedAbortHandler(Translate("Liquid waste cap mounting"), Translate("The cap is not correctly mounted - check your system. The method will abort after pressing OK"));
            TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("The cap is not correctly mounted - check your system. The method will abort after pressing OK"));
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
        if (l_blnStatusBottleFilling == 1)
        {
          MECC::TraceComment(Translate("liquid waste bottle full and needs to be emptied"));
          _DATA_AppendStatusWindow(Translate("Liquid waste bottle full and needs to be emptied"));
          _DATA_ShowListDialog(Translate("Filling state error"), Translate("Liquid waste check"), Translate("check bottle and empty it"), Translate("Liquid waste system"));
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
            	l_strReturnValueFillingState = arrRetValues[3];
          }
          l_blnStatusBottleFilling = StrRight(l_strReturnValueFillingState, 1);
          l_blnStatusBottleFilling = StrIVal(l_blnStatusBottleFilling);
          if (l_blnStatusBottleFilling == 1)
          {
            _DATA_IntegratedAbortHandler(Translate("Liquid waste bottle filling state"), Translate("The bottle is still filled - check your system. The method will abort after pressing OK"));
            TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, Translate("The bottle is still filled - check your system. The method will abort after pressing OK"));
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
        else
        {
          MECC::TraceComment(Translate("liquid waste bottle empty"));
          _DATA_AppendStatusWindow(Translate("Liquid waste bottle empty"));
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Cap mounting state l_strReturnValueCapMounting : "), l_strReturnValueCapMounting);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Cap mounted - l_blnStatusCapMounting : "), l_blnStatusCapMounting);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strReturnValueFillingState : "), l_strReturnValueFillingState);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_blnStatusBottleFilling : "), l_blnStatusBottleFilling);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void {
    private variable l_strAffectedLibrary;
    private variable l_strAbortMessage;
    private variable l_arrListAbortHandlerMessage[];
    private variable l_strFunctionName;
    private variable l_strComment;
    if (t_activateIntegratedAbortHandler == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strFunctionName = Translate("");
    l_strComment = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, l_strComment);
    VectorCustomDialogs::Initialize();
    l_strAffectedLibrary = StrConcat2(Translate("Affected library :    "), i_strFunctionName);
    l_strAbortMessage = StrConcat2(Translate("Message : "), i_strAbortMessage);
    l_arrListAbortHandlerMessage.SetSize(0);
    l_arrListAbortHandlerMessage.AddAsLast(l_strAffectedLibrary);
    l_arrListAbortHandlerMessage.AddAsLast(l_strAbortMessage);
    VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Internal abort handler activated - error occurred - abort routine started"), Translate("Press OK to Abort the run."), l_arrListAbortHandlerMessage);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, i_strAbortMessage);
    abort;
  }

  private function _DATA_AppendStatusWindow( variable i_strMessageToAppend ) void {
    onerror goto errLabel_1 ;
    err.Clear();
    VectorCustomDialogs::AppendStatusText(i_strMessageToAppend);
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      VectorCustomDialogs::Initialize();
      VectorCustomDialogs::ShowStatusDialog(Translate("Liquid waste controller"));
      VectorCustomDialogs::AppendStatusText(i_strMessageToAppend);
    }   /* end if from skip handler if no error */
  }

  private function _DATA_ShowListDialog( variable i_strLastErrorMessage, variable i_strTopText, variable i_strBottomText, variable i_strDeviceName ) void {
    private variable l_strLastError;
    private variable l_strDialogTitle;
    private variable l_intReturnValueDialog;
    private variable l_arrListTECMessage[];
    l_strDialogTitle = StrConcat2(i_strDeviceName, Translate(" - inferface "));
    l_strLastError = StrConcat2(Translate("Liquid waste error description : "), i_strLastErrorMessage);
    l_arrListTECMessage.SetSize(0);
    l_arrListTECMessage.AddAsLast(l_strLastError);
    onerror goto errLabel_2 ;
    err.Clear();
    l_intReturnValueDialog = VectorCustomDialogs::ListDialog(l_strDialogTitle, VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, i_strTopText, i_strBottomText, l_arrListTECMessage);
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      VectorCustomDialogs::Initialize();
      l_intReturnValueDialog = VectorCustomDialogs::ListDialog(l_strDialogTitle, VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, i_strTopText, i_strBottomText, l_arrListTECMessage);
    }   /* end if from skip handler if no error */
    if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
    {
      MECC::TraceComment(Translate("************  Method will continue - USER confirmed dialog with OK ************"));
    }
  }

  private function _VersionHistory(  ) void {
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  LiquidWaste_Controller\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      January  31, 2022\nVersion:  0.1\n,\n\n\nVersion Notes:\n\n1. Method created to test Submethod Library\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  LiquidWaste_Controller\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      May  15, 2023\nVersion:  0.2\n,\n\n\nVersion Notes:\n\n1. traces optimized using ASW trace library\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  LiquidWaste_Controller\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      August  04, 2023\nVersion:  0.3\n,\n\n\nVersion Notes:\n\n1. introduced legacy HSLSensorLib to adress STARline based systems with HSL Senors\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  LiquidWaste_Controller\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      January  02, 2024\nVersion:  0.4.1\n,\n\n\nVersion Notes:\n\n1. cleaned traces\n2. i_ActivateIntegratedAbortHandler integrated in INIT step to define usage of abort handler within the controller\n3. introduced bln success return value to be handed over to the main method\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  LiquidWaste_Controller\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      January  05, 2024\nVersion:  0.4.2\n,\n\n\nVersion Notes:\n\n1. changed traces in start stop function\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  LiquidWaste_Controller\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      January  05, 2024\nVersion:  0.4.3\n,\n\n\nVersion Notes:\n\n1. insert check simulation mode venus\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  LiquidWaste_Controller\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      March  06, 2024\nVersion:  0.4.4\n,\n\n\nVersion Notes:\n\n1. new output variable without extension for versioning in Init tab\n\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  LiquidWaste_Controller\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      March  11, 2024\nVersion:  0.4.5\n,\n\n\nVersion Notes:\n\n1.modyfied tracing of version used\n\n\n*************************************************************************************************************************************"));
  }

  private function _CheckSytemConnected( device & ML_STAR ) void {
    private variable l_strDeviceName;
    private variable l_strDeviceViewName;
    l_strDeviceName = DevGetInstrumentName(ML_STAR);
    l_strDeviceViewName = DevGetInstrumentViewName(ML_STAR);
    t_intPlatformType = 0;
    InstrumentTypeHelper::GetStarType(t_intPlatformType);
    TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("l_strDeviceName : "), l_strDeviceName, Translate(" - l_strDeviceViewName : "), l_strDeviceViewName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(" Platform type 0 = STARline; 1 = STARVline"), t_intPlatformType);
  }
} // library namespace
