#pragma once
#include "ArrayTools\\ArrayTools.hs_"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLSeqLib.hsl"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "HSLStrLib.hsl"
#include "HSLTimLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "Tip Management Library\\TipManagementLibrary.hs_"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLExtensions\\Sequence.hsl"
#include "HSLExtensions\\Array.hsl"
#include "HSLExtensions\\String.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"
#include "HSLSTCCLib.hs_"

namespace LOADCARRIER_CONTROLLER {
  variable t_strFullPathReportFile;
  variable t_intTraceLevel;
  variable t_blnDeactivateLoadingCarrierSteps;
  variable l_strDeviceName;
  variable t_strLibraryName;
  variable t_strControllerVersion;
  variable t_strLibraryNameWithoutExtension;
  variable t_intAutoloadParkingPosition;
  variable t_blnActivateIntegratedAbortHandler;
  function Init( device & ML_STAR, variable i_strFullPathReportFile, variable i_blnDeactivateLoadingCarrierSteps, variable i_blnActivateIntegratedAbortHandler, variable i_intAutoloadParkingPosition, variable & o_strControllerNameAndVersion ) void ;
  function LoadCarrierByCarrierID( device & ML_STAR, variable i_strCarrierIDToBeLoaded, variable i_strPositionsToBeScanned ) void ;
  function LoadCarrierBySequence( device & ML_STAR, sequence i_SequenceToBeLoaded, variable i_strPositionsToBeScanned ) void ;
  function LoadTipCarrierByTipCounterNames( device & ML_STAR, variable & i_arrTipcounterNames[], variable i_blnBarcodeReadingActivated ) void ;
  function UnloadAllCarriers( device & ML_STAR ) void ;
  function UnloadCarrierByCarrierID( device & ML_STAR, variable i_strCarrierIDToBeUnloaded ) void ;
  function UnloadCarrierBySequence( device & ML_STAR, sequence i_SequenceToBeUnloaded ) void ;
  function UnloadTipCarrierByTipCounterNames( device & ML_STAR, variable & i_arrTipcounterNames[] ) void ;
  private function _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToReport( device & ML_STAR, variable i_strStepReturnValue3LoadingStep, variable i_strStepReturnValue4LoadingStep ) void ;
  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void ;
  private function _DATA_TranslateAutoLoadOrIDLErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedLoadCarrierInformaton ) void ;
  private function _DATA_TranslateVectorCustomDialogsErrorCodes( variable i_intBindReturnValue ) void ;
  private function _DATA_UpdateInformationIntoReportFile( variable i_strInformationToUpdateReportList ) void ;
  private function _GetDistinctSortedCarriersAndPositionIDsFromTipCounters( device & Instrument, variable & i_arrTipcounterNames[], variable & o_arr_TemplateIDs[], variable & o_arr_PositionIDs[] ) void ;
  private function _GetDistinctSortedCarriersFromCarrierIDs( device & Instrument, variable & i_arr_TemplateIDs[], variable & o_arr_TemplateIDsDistinct[] ) void ;
  private function _GetDistinctSortedCarriersFromSequence( device & Instrument, sequence i_seq, variable & o_arr_TemplateIDs[] ) void ;
  private function _Version(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ARRAYTOOLS::_InitLibrary();
    TIPMANAGEMENTLIBRARY::_InitLibrary();
  }
  function _ExitLibrary() {
    ARRAYTOOLS::_ExitLibrary();
    TIPMANAGEMENTLIBRARY::_ExitLibrary();
  }

  private function _Version(  ) void {
    if(0){
    }
  }

  function LoadCarrierBySequence( device & ML_STAR, sequence i_SequenceToBeLoaded, variable i_strPositionsToBeScanned ) void {
    private variable l_intSizeOfArrCarrierIDsDistinct;
    private variable l_strCarrierIDToLoad;
    private variable l_intCarrierIDIndex;
    private variable l_arrVisibility[];
    private variable l_intGetCurrentPositionID;
    private variable l_strStepReturnValuePositions;
    private variable l_strStepReturnValueCarrier;
    private variable l_arr_strCarrierIDsToLoad[];
    private variable l_strResultIsLoadable;
    private variable l_strCarrierUnloadable;
    private variable l_strBarcodeWidth;
    private variable l_strBarcodeDistToDeck;
    private variable l_blnNoCustomWindowOfInterest;
    private variable l_strBarcodeHeight;
    private variable l_strBarcodeYTrigger;
    private variable l_strCarrierLabelName;
    private variable l_strLoadCarrierMessage;
    private variable l_strFunctionName;
    private variable l_strErrorMessageLoadingCarrier;
    private variable l_intReturnValue;
    private variable l_strErrorMessageLoadingCarrierReportFile;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    l_intGetCurrentPositionID = i_SequenceToBeLoaded.GetCurrentPosition();
    if (l_intGetCurrentPositionID == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("No sequence to be loaded ."), Translate("Current position ID is set to 0."));
      return;
    }
    else
    {
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_SequenceToBeLoaded);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_strPositionsToBeScanned: "), i_strPositionsToBeScanned);
    _GetDistinctSortedCarriersFromSequence(ML_STAR, i_SequenceToBeLoaded, l_arr_strCarrierIDsToLoad);
    l_intSizeOfArrCarrierIDsDistinct=l_arr_strCarrierIDsToLoad.GetSize();
    l_arrVisibility.SetSize(0);
    if (t_blnDeactivateLoadingCarrierSteps == ASWGLOBAL::BOOL::FALSE)
    {
      {
        for(l_intCarrierIDIndex = 0; l_intCarrierIDIndex < l_intSizeOfArrCarrierIDsDistinct;)
        {
          l_intCarrierIDIndex = l_intCarrierIDIndex + 1;
          l_strCarrierIDToLoad=l_arr_strCarrierIDsToLoad.GetAt(l_intCarrierIDIndex-1);
          HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strResultIsLoadable, Translate("MlStarCarIsLoadable"), l_strCarrierIDToLoad);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strResultIsLoadable "), l_strResultIsLoadable);
          if (l_strResultIsLoadable == "1")
          {
            HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strCarrierLabelName, Translate("MlStarCarLabelName"), l_strCarrierIDToLoad);
            if (l_strCarrierLabelName == "")
            {
              l_strLoadCarrierMessage = StrConcat4(Translate("Load carrier: "), l_strCarrierIDToLoad, Translate(""), Translate(""));
            }
            else
            {
              l_strLoadCarrierMessage = StrConcat4(Translate("Load carrier: "), l_strCarrierLabelName, Translate(""), Translate(""));
            }
            VectorCustomDialogs::AppendStatusText(l_strLoadCarrierMessage);
            HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strBarcodeWidth, Translate("MlStarBarcodeWidth"), l_strCarrierIDToLoad);
            HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strBarcodeHeight, Translate("MlStarBarcodeHeight"), l_strCarrierIDToLoad);
            HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strBarcodeDistToDeck, Translate("MlStarBarcodeDistToDeck"), l_strCarrierIDToLoad);
            HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strBarcodeYTrigger, Translate("MlStarBarcodeYTrigger"), l_strCarrierIDToLoad);
            TRACELEVEL::Trace_08(TRACE_LEVEL_DEBUG, Translate("l_strBarcodeHeight: "), l_strBarcodeHeight, Translate("; l_strBarcodeWidth: "), l_strBarcodeWidth, Translate("; l_strBarcodeDistToDeck: "), l_strBarcodeDistToDeck, Translate("; l_strBarcodeYTrigger: "), l_strBarcodeYTrigger);
            if (l_strBarcodeWidth == ""|| l_strBarcodeHeight == ""|| l_strBarcodeDistToDeck == ""|| l_strBarcodeYTrigger == "")
            {
              l_blnNoCustomWindowOfInterest = ASWGLOBAL::BOOL::TRUE;
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("The size of the barcode custom window of interest could not be retrieved from the labware properties of the deck layout."), Translate(" Barcode reading will be performed with the default barcode window."));
            }
            onerror goto errLabel_1 ;
            err.Clear();
            if (l_blnNoCustomWindowOfInterest == ASWGLOBAL::BOOL::TRUE)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                	l_strStepReturnValueCarrier = arrRetValues[2];
                	l_strStepReturnValuePositions = arrRetValues[3];
              }
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                	l_strStepReturnValueCarrier = arrRetValues[2];
                	l_strStepReturnValuePositions = arrRetValues[3];
              }
            }
            _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToReport(ML_STAR, l_strStepReturnValueCarrier, l_strStepReturnValuePositions);
            errLabel_1 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
              l_strErrorMessageLoadingCarrier = StrConcat12(Translate("There was an issue while loading the carrier with the following ID: "), Translate("\n\n"), l_strCarrierIDToLoad, Translate("\n\n"), Translate("Possible error: no carrier or wrong carrier."), Translate("\n\n"), Translate("Please load the requested carrier manually."), Translate("\n\n"), Translate("Press OK once the carrier has been loaded."), Translate("\n"), Translate("If you are uncertain of the accuracy of the carrier\nplease press CANCEL to abort the run and revise the method."), Translate(""));
              l_intReturnValue = VectorCustomDialogs::ErrorDialog(Translate("Carrier Loading Error"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, l_strErrorMessageLoadingCarrier, Translate(""));
              if (l_intReturnValue == ASWGLOBAL::DIALOG::CANCEL)
              {
                _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Difficulties with loading of carrier. User intervention requested to load carrier manually. Abort requested by user."));
              }
              l_strErrorMessageLoadingCarrierReportFile = StrConcat12(Translate("There was a problem loading the carrier: "), Translate(""), l_strCarrierIDToLoad, Translate(""), Translate(""), Translate(""), Translate(". Request for manual carrier loading."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              _DATA_UpdateInformationIntoReportFile(l_strErrorMessageLoadingCarrierReportFile);
            }   /* end if from skip handler if no error */
          }
          else
          {
            l_strCarrierUnloadable = StrConcat4(Translate("The carrier with the Carrier ID: "), l_strCarrierIDToLoad, Translate(" is not a loadable carrier. Loading cannot be performed."), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(""), l_strCarrierUnloadable);
            _DATA_UpdateInformationIntoReportFile(l_strCarrierUnloadable);
          }
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  function UnloadCarrierBySequence( device & ML_STAR, sequence i_SequenceToBeUnloaded ) void {
    private variable l_intSizeOfArrCarrierIDsDistinct;
    private variable l_int_rtnErrorDialog;
    private variable l_intCarrierIDIndex;
    private variable l_strCarrierIDToUnload;
    private variable l_arr_strCarrierIDsToUnload[];
    private variable l_strMessageReportFile;
    private variable l_intGetCurrentPositionID;
    private variable l_strMessageCarrierUnloadable;
    private variable l_strResultIsLoadable;
    private variable l_strCarrierLabelName;
    private variable l_strLoadCarrierMessage;
    private variable l_strStepReturnValueCarrier;
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    l_intGetCurrentPositionID = i_SequenceToBeUnloaded.GetCurrentPosition();
    if (l_intGetCurrentPositionID == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("No sequence to be unloaded ."), Translate("Current position ID is set to 0."));
      return;
    }
    else
    {
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_SequenceToBeUnloaded);
    }
    _GetDistinctSortedCarriersFromSequence(ML_STAR, i_SequenceToBeUnloaded, l_arr_strCarrierIDsToUnload);
    l_intSizeOfArrCarrierIDsDistinct=l_arr_strCarrierIDsToUnload.GetSize();
    if (t_blnDeactivateLoadingCarrierSteps == ASWGLOBAL::BOOL::FALSE)
    {
      {
        for(l_intCarrierIDIndex = 0; l_intCarrierIDIndex < l_intSizeOfArrCarrierIDsDistinct;)
        {
          l_intCarrierIDIndex = l_intCarrierIDIndex + 1;
          l_strCarrierIDToUnload=l_arr_strCarrierIDsToUnload.GetAt(l_intCarrierIDIndex-1);
          HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strResultIsLoadable, Translate("MlStarCarIsLoadable"), l_strCarrierIDToUnload);
          if (l_strResultIsLoadable == "1")
          {
            l_strMessageReportFile = StrConcat4(Translate("Unload carrier: "), l_strCarrierIDToUnload, Translate(""), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_strStepReturnValueCarrier: "), l_strStepReturnValueCarrier);
            HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strCarrierLabelName, Translate("MlStarCarLabelName"), l_strCarrierIDToUnload);
            if (l_strCarrierLabelName == "")
            {
              l_strLoadCarrierMessage = StrConcat4(Translate("Unload carrier: "), l_strCarrierIDToUnload, Translate(""), Translate(""));
            }
            else
            {
              l_strLoadCarrierMessage = StrConcat4(Translate("Unload carrier: "), l_strCarrierLabelName, Translate(""), Translate(""));
            }
            VectorCustomDialogs::AppendStatusText(l_strLoadCarrierMessage);
            ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            _DATA_UpdateInformationIntoReportFile(l_strMessageReportFile);
          }
          else
          {
            l_strMessageCarrierUnloadable = StrConcat4(Translate("The carrier with the Carrier ID: "), l_strCarrierIDToUnload, Translate(" is not a loadable carrier. Unloading cannot be performed."), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(""), l_strMessageCarrierUnloadable);
            _DATA_UpdateInformationIntoReportFile(l_strMessageCarrierUnloadable);
            _DATA_TranslateVectorCustomDialogsErrorCodes(l_int_rtnErrorDialog);
          }
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  private function _DATA_TranslateVectorCustomDialogsErrorCodes( variable i_intBindReturnValue ) void {
    private variable l_blnSkipDialog;
    private variable l_strErrorMessage;
    private variable l_intBindReturnValue;
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    if (i_intBindReturnValue >= ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Bind return value of current Vector custom dialog : "), i_intBindReturnValue);
      if (i_intBindReturnValue == ASWGLOBAL::BOOL::FALSE)
      {
        l_blnSkipDialog = ASWGLOBAL::BOOL::TRUE;
        l_strErrorMessage = Translate("Command did not end successfully ");
      }
      else
      {
        l_blnSkipDialog = ASWGLOBAL::BOOL::FALSE;
      }
      if (i_intBindReturnValue == -1)
      {
        l_strErrorMessage = Translate("Sizes of initialization arrays are inhomogeneous. Hint : Check your arrays (sizes have to be equal). ");
      }
      if (i_intBindReturnValue == -2)
      {
        l_strErrorMessage = Translate("Data range / type. Hint : Used range or range in combination with data type is invalid.");
      }
      if (i_intBindReturnValue == -5)
      {
        l_strErrorMessage = Translate("IconSet Directory. Hint : Make sure that the directory named “ASWIconSet” exists inside the directory of ASWStandardDialogs library.");
      }
      if (i_intBindReturnValue == -8)
      {
        l_strErrorMessage = Translate("Dialog has been closed through timeout. Hint : This may or may not be an error, depending on the programmer’s intention. Clicking on a dialog interrupts timer and thus does not lead to a error.");
      }
      if (i_intBindReturnValue == -9)
      {
        l_strErrorMessage = Translate("The dialog was not . Hint : Do not use shortcuts to close the dialog, use buttons from the dialog.");
      }
      if (i_intBindReturnValue == -10)
      {
        l_strErrorMessage = Translate("Library is not initialized. Hint : Initialize library before any other function is called.");
      }
      if (i_intBindReturnValue == -11)
      {
        l_strErrorMessage = Translate("Bad Parameter. Hint : See trace for more information about which parameter caused the error. Adjust the input parameter accordingly.");
      }
      if (i_intBindReturnValue == -1000)
      {
        l_strErrorMessage = Translate("A COM error has occured. Hint : Please ensure that the com library HamiltonASWGUI.Dialogs.dll is registered.");
      }
      if (i_intBindReturnValue == -1001)
      {
        l_strErrorMessage = Translate("A COM error has occured. Hint : You cannot execute more dialogs at the same time than defined in the HSL library (default is dialog at a time).");
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Error message od Vector custom dialog library : "), l_strErrorMessage);
      if (l_blnSkipDialog == ASWGLOBAL::BOOL::FALSE)
      {
        l_intBindReturnValue = VectorCustomDialogs::MessageDialog(Translate("Error message of Vector Custom Dialogs. OK is trying to continue the run ignoring the error - CANCEL will abort the run"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 60, l_strErrorMessage);
        if (l_intBindReturnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  private function _DATA_TranslateAutoLoadOrIDLErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedLoadCarrierInformaton ) void {
    private variable l_strMainError;
    private variable l_intErrorValue;
    private variable l_strErrorRecovery;
    private variable l_strSlaveError;
    private variable l_strFunctionName;
    o_strTranslatedLoadCarrierInformaton = 0;
    if(0){
      l_strFunctionName = Translate("");
      l_strFunctionName = GetFunctionName();
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    }
    l_intErrorValue = 0;
    l_strMainError = Translate("unknown error");
    l_strSlaveError = Translate("unknown error");
    l_strErrorRecovery = Translate("unknown error");
    if (i_intMainError == 0)
    {
      l_strMainError = Translate("No main error.");
    }
    if (i_intMainError == 1)
    {
      l_strMainError = Translate("Syntax error.");
    }
    if (i_intMainError == 2)
    {
      l_strMainError = Translate("Hardware error. Drive blocked, low power etc.");
    }
    if (i_intMainError == 3)
    {
      l_strMainError = Translate("Not Executed Error. There was an error in previous part command.");
    }
    if (i_intMainError == 4)
    {
      l_strMainError = Translate("Clot Error. Tip blocked.");
    }
    if (i_intMainError == 5)
    {
      l_strMainError = Translate("Barcode unreadable. Bad or missing barcode.");
    }
    if (i_intMainError == 6)
    {
      l_strMainError = Translate("Insufficient Liquid Error. Not enough liquid available.");
    }
    if (i_intMainError == 7)
    {
      l_strMainError = Translate("Tip already fitted. Repeated attempts to fit a tip or iSwap movement with tips.");
    }
    if (i_intMainError == 8)
    {
      l_strMainError = Translate("No Tip. Command was started without fitting tip. Tip was not fitted or fell off again.");
    }
    if (i_intMainError == 9)
    {
      l_strMainError = Translate("No Carrier. Load command without carrier performed.");
    }
    if (i_intMainError == 10)
    {
      l_strMainError = Translate("Not completed. Command in command buffer was aborted due to an error in a previous command, or command stack was deleted.");
    }
    if (i_intMainError == 11)
    {
      l_strMainError = Translate("Pressure LLD Error. A dispense with pressure liquid level detection is not allowed.");
    }
    if (i_intMainError == 12)
    {
      l_strMainError = Translate("No teach signal. X-Movement to LLD reached maximum allowable position without detecting teach signal.");
    }
    if (i_intMainError == 13)
    {
      l_strMainError = Translate("Loading tray error. Position already occupied.");
    }
    if (i_intMainError == 14)
    {
      l_strMainError = Translate("Pressure LLD Error. Pressure liquid level detection in a consecutive aspiration is not allowed.");
    }
    if (i_intMainError == 15)
    {
      l_strMainError = Translate("Not allowed parameter combination. I.e. pLLD and dispense or wrong X-drive assignment.");
    }
    if (i_intMainError == 16)
    {
      l_strMainError = Translate("Cover close error. Cover is not closed and couldn't be locked.");
    }
    if (i_intMainError == 17)
    {
      l_strMainError = Translate("Improper Aspiration or Dispense Error. The pressure-based aspiration / dispensation control reported an error ( not enough liquid ).");
    }
    if (i_intMainError == 18)
    {
      l_strMainError = Translate("Wash fluid or waste error. Missing wash fluid OR waste of particular washer is full.");
    }
    if (i_intMainError == 19)
    {
      l_strMainError = Translate("Incubation error. Incubator temperature out of limit.");
    }
    if (i_intMainError == 20)
    {
      l_strMainError = Translate("TADM overshot. Overshot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 21)
    {
      l_strMainError = Translate("No element. Expected element not detected.");
    }
    if (i_intMainError == 22)
    {
      l_strMainError = Translate("Element still holding. Get command is sent twice or element is not discarded.");
    }
    if (i_intMainError == 23)
    {
      l_strMainError = Translate("Element lost. Expected element is missing or lost.");
    }
    if (i_intMainError == 24)
    {
      l_strMainError = Translate("Illegal target plate position. Over or underflow of iSWAP positions OR iSWAP is not in park position during pipetting activities.");
    }
    if (i_intMainError == 25)
    {
      l_strMainError = Translate("Illegal user access. Carrier was manually removed or cover is open (immediate stop is executed).");
    }
    if (i_intMainError == 26)
    {
      l_strMainError = Translate("TADM undershot. Undershot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 27)
    {
      l_strMainError = Translate("Position Error. The position is out of range.");
    }
    if (i_intMainError == 28)
    {
      l_strMainError = Translate("Unexpected cLLD Error. The cLLD detected a liquid level above start height of liquid level search.");
    }
    if (i_intMainError == 29)
    {
      l_strMainError = Translate("Area already occupied. Its impossible to occupy area because this area is already in use.");
    }
    if (i_intMainError == 30)
    {
      l_strMainError = Translate("Impossible to occupy area. Area can't be occupied because is no solution for arm prepositioning.");
    }
    if (i_intMainError == 31)
    {
      l_strMainError = Translate("Anti drop control error. Anti drop controlling out of tolerance.");
    }
    if (i_intMainError == 32)
    {
      l_strMainError = Translate("Parameter out of range.");
    }
    if (i_intMainError == 33)
    {
      l_strMainError = Translate("Parameter does not belong to command, or not all parameters were sent.");
    }
    if (i_intMainError == 34)
    {
      l_strMainError = Translate("Node name unknown.");
    }
    if (i_intMainError == 35)
    {
      l_strMainError = Translate("ID parameter error.");
    }
    if (i_intMainError == 37)
    {
      l_strMainError = Translate("Node name defined twice.");
    }
    if (i_intMainError == 38)
    {
      l_strMainError = Translate("Faulty XL channel settings.");
    }
    if (i_intMainError == 39)
    {
      l_strMainError = Translate("Faulty robotic channel settings.");
    }
    if (i_intMainError == 40)
    {
      l_strMainError = Translate("PIP task busy.");
    }
    if (i_intMainError == 41)
    {
      l_strMainError = Translate("Auto load task busy.");
    }
    if (i_intMainError == 42)
    {
      l_strMainError = Translate("Miscellaneous task busy.");
    }
    if (i_intMainError == 43)
    {
      l_strMainError = Translate("Incubator task busy.");
    }
    if (i_intMainError == 44)
    {
      l_strMainError = Translate("Washer task busy.");
    }
    if (i_intMainError == 45)
    {
      l_strMainError = Translate("iSWAP task busy.");
    }
    if (i_intMainError == 46)
    {
      l_strMainError = Translate("CoRe 96 head task busy.");
    }
    if (i_intMainError == 47)
    {
      l_strMainError = Translate("Carrier sensor doesn't work properly.");
    }
    if (i_intMainError == 48)
    {
      l_strMainError = Translate("CoRe 384 head task busy.");
    }
    if (i_intMainError == 49)
    {
      l_strMainError = Translate("Nano pipettor task busy.");
    }
    if (i_intMainError == 50)
    {
      l_strMainError = Translate("XL channel task busy.");
    }
    if (i_intMainError == 51)
    {
      l_strMainError = Translate("Tube gripper task busy.");
    }
    if (i_intMainError == 52)
    {
      l_strMainError = Translate("Imaging channel task busy.");
    }
    if (i_intMainError == 53)
    {
      l_strMainError = Translate("Robotic channel task busy.");
    }
    if (i_intMainError == 99)
    {
      l_strMainError = Translate("Slave Error. This error code indicates an error in one of the slaves.");
    }
    if (i_intMainError == 102)
    {
      l_strMainError = Translate("Liquid Level Error. Liquid surface not detected.");
    }
    if (i_intMainError == 104)
    {
      l_strMainError = Translate("Not Aspirated Error. Dispense volume exceeds the aspirated volume.");
    }
    if (i_intMainError == 105)
    {
      l_strMainError = Translate("Improper Dispensation Error. The dispensed volume is out of tolerance (may only occur for Nano Pipettor Dispense steps).");
    }
    if (i_intMainError == 106)
    {
      l_strMainError = Translate("Labware not present.");
    }
    if (i_intMainError == 109)
    {
      l_strMainError = Translate("Barcode mask detected doesn't match to the defined labware.");
    }
    if (i_intSlaveError == 0)
    {
      l_strSlaveError = Translate("No slave error.");
    }
    if (i_intSlaveError == 20)
    {
      l_strSlaveError = Translate("No I²C Bus or EEPROM not working. Transfer check error. No communication to EEPROM.");
    }
    if (i_intSlaveError == 25)
    {
      l_strSlaveError = Translate("Wrong Flash EEP Data");
    }
    if (i_intSlaveError == 26)
    {
      l_strSlaveError = Translate("Flash EEP not programmable");
    }
    if (i_intSlaveError == 27)
    {
      l_strSlaveError = Translate("Flash EEP not erasable");
    }
    if (i_intSlaveError == 28)
    {
      l_strSlaveError = Translate("Flash EEP Checksum wrong");
    }
    if (i_intSlaveError == 29)
    {
      l_strSlaveError = Translate("Wrong Firmware loaded");
    }
    if (i_intSlaveError == 30)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined command.");
    }
    if (i_intSlaveError == 31)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined parameter.");
    }
    if (i_intSlaveError == 32)
    {
      l_strSlaveError = Translate("Syntax check error. Parameter out of range.");
    }
    if (i_intSlaveError == 34)
    {
      l_strSlaveError = Translate("Command not available with manual load");
    }
    if (i_intSlaveError == 35)
    {
      l_strSlaveError = Translate("General error during execution of commands. Voltages outside permitted range.");
    }
    if (i_intSlaveError == 36)
    {
      l_strSlaveError = Translate("General error during execution of commands. Stop during execution of a command.");
    }
    if (i_intSlaveError == 37)
    {
      l_strSlaveError = Translate("General error during execution of commands.Searched Position not found");
    }
    if (i_intSlaveError == 40)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process. Level 0");
    }
    if (i_intSlaveError == 41)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process. Level 1");
    }
    if (i_intSlaveError == 42)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process. Level 2");
    }
    if (i_intSlaveError == 50)
    {
      l_strSlaveError = Translate("Scanner X-drive - Initialisation failed.");
    }
    if (i_intSlaveError == 51)
    {
      l_strSlaveError = Translate("Scanner X-drive - Drive not initialized.");
    }
    if (i_intSlaveError == 52)
    {
      l_strSlaveError = Translate("Scanner X-drive - Movement error.");
    }
    if (i_intSlaveError == 53)
    {
      l_strSlaveError = Translate("Scanner X-drive - Position out of permitted area.");
    }
    if (i_intSlaveError == 54)
    {
      l_strSlaveError = Translate("Scanner X-drive - Movement error.");
    }
    if (i_intSlaveError == 55)
    {
      l_strSlaveError = Translate("Scanner X-drive - Target Slot out of permitted area.");
    }
    if (i_intSlaveError == 56)
    {
      l_strSlaveError = Translate("Camera H drive - Initialisation failed.");
    }
    if (i_intSlaveError == 57)
    {
      l_strSlaveError = Translate("Camera H drive - Drive not initialized.");
    }
    if (i_intSlaveError == 58)
    {
      l_strSlaveError = Translate("Camera H drive - Movement error.");
    }
    if (i_intSlaveError == 60)
    {
      l_strSlaveError = Translate("Carrier Y- drive - Initialisation failed.");
    }
    if (i_intSlaveError == 61)
    {
      l_strSlaveError = Translate("Carrier Y- drive - Drive not initialized.");
    }
    if (i_intSlaveError == 62)
    {
      l_strSlaveError = Translate("Carrier Y- drive - Movement error.");
    }
    if (i_intSlaveError == 63)
    {
      l_strSlaveError = Translate("Carrier Y- drive - Position out of permitted area.");
    }
    if (i_intSlaveError == 64)
    {
      l_strSlaveError = Translate("Carrier Y- drive - Mechanic Limit not found.");
    }
    if (i_intSlaveError == 65)
    {
      l_strSlaveError = Translate("Carrier Z - drive - Initialisation failed.");
    }
    if (i_intSlaveError == 66)
    {
      l_strSlaveError = Translate("Carrier Z - drive - Drive not initialized.");
    }
    if (i_intSlaveError == 67)
    {
      l_strSlaveError = Translate("Carrier Z - drive - Movement error.");
    }
    if (i_intSlaveError == 70)
    {
      l_strSlaveError = Translate("Barcode reader section 1 - Communication error.");
    }
    if (i_intSlaveError == 71)
    {
      l_strSlaveError = Translate("Barcode reader section 1 - Connector error.");
    }
    if (i_intSlaveError == 72)
    {
      l_strSlaveError = Translate("Barcode reader section 1 - Carrier identification barcode error.");
    }
    if (i_intSlaveError == 73)
    {
      l_strSlaveError = Translate("Barcode reader section 1 - Barcode reader send parameter error.");
    }
    if (i_intSlaveError == 74)
    {
      l_strSlaveError = Translate("Barcode reader section 1 - Barcode reader send parameter error.");
    }
    if (i_intSlaveError == 76)
    {
      l_strSlaveError = Translate("Barcode reader section 1 - Barcode reader send parameter error.");
    }
    if (i_intSlaveError == 77)
    {
      l_strSlaveError = Translate("Barcode reader section 1 - Barcode reader send parameter error.");
    }
    if (i_intSlaveError == 78)
    {
      l_strSlaveError = Translate("Barcode reader section 1 - Barcode reader communication timeout error.");
    }
    if (i_intSlaveError == 79)
    {
      l_strSlaveError = Translate("Barcode reader section 1 - Barcode reader send parameter error.");
    }
    if (i_intSlaveError == 80)
    {
      l_strSlaveError = Translate("Errors in carrier handling - Identification barcode not readable.");
    }
    if (i_intSlaveError == 82)
    {
      l_strSlaveError = Translate("Errors in carrier handling - Carrier not pulled in.");
    }
    if (i_intSlaveError == 83)
    {
      l_strSlaveError = Translate("Errors in carrier handling -  Loadtray full.");
    }
    if (i_intSlaveError == 84)
    {
      l_strSlaveError = Translate("Errors in carrier handling - Carrier already pulled in.");
    }
    if (i_intSlaveError == 85)
    {
      l_strSlaveError = Translate("Loadtray drive - Initialization failed.");
    }
    if (i_intSlaveError == 86)
    {
      l_strSlaveError = Translate("Loadtray drive - Drive not initialized.");
    }
    if (i_intSlaveError == 87)
    {
      l_strSlaveError = Translate("Loadtray drive - Movement error.");
    }
    if (i_intSlaveError == 89)
    {
      l_strSlaveError = Translate("Loadtray drive - Loadtray locked error.");
    }
    if (i_intSlaveError == 90)
    {
      l_strSlaveError = Translate("Barcode reader section 2 - Communication error.");
    }
    if (i_intSlaveError == 91)
    {
      l_strSlaveError = Translate("Barcode reader section 2 - Communication error.");
    }
    if (i_intSlaveError == 92)
    {
      l_strSlaveError = Translate("Barcode reader section 2 - Object detection error.");
    }
    if (i_intSlaveError == 93)
    {
      l_strSlaveError = Translate("Barcode reader section 2 - Labware Definition misfit.");
    }
    if (i_intSlaveError == 94)
    {
      l_strSlaveError = Translate("Barcode reader section 2 - Barcode reader unexpected reset.");
    }
    if (i_intSlaveError == 95)
    {
      l_strSlaveError = Translate("Barcode reader section 2 - Return message exceeds limit.");
    }
    if (i_intSlaveError == 97)
    {
      l_strSlaveError = Translate("Miscellaneous - Wrong Carrier state.");
    }
    if (i_intErrorRecovery == 0)
    {
      l_strErrorRecovery = Translate("No recovery.");
    }
    if (i_intErrorRecovery == 1)
    {
      l_strErrorRecovery = Translate("Abort - Run aborted.");
    }
    if (i_intErrorRecovery == 2)
    {
      l_strErrorRecovery = Translate("Cancel - run canceled or user defined errorhandling  was executed.");
    }
    if (i_intErrorRecovery == 3)
    {
      l_strErrorRecovery = Translate("Initialize. Instrument initialized again.");
    }
    if (i_intErrorRecovery == 4)
    {
      l_strErrorRecovery = Translate("Repeat. Command repeated.");
    }
    if (i_intErrorRecovery == 5)
    {
      l_strErrorRecovery = Translate("Exclude. Channel or position excluded until next tip pick up.");
    }
    if (i_intErrorRecovery == 6)
    {
      l_strErrorRecovery = Translate("Waste. Tip ejected to the default waste.");
    }
    if (i_intErrorRecovery == 7)
    {
      l_strErrorRecovery = Translate("Air. Rest of missing volume filled up with air.");
    }
    if (i_intErrorRecovery == 8)
    {
      l_strErrorRecovery = Translate("Bottom. Aspiration repeated on container bottom.");
    }
    if (i_intErrorRecovery == 9)
    {
      l_strErrorRecovery = Translate("Continue. Run continued without any change.");
    }
    if (i_intErrorRecovery == 10)
    {
      l_strErrorRecovery = Translate("Barcode. Barcode assigned manually.");
    }
    if (i_intErrorRecovery == 11)
    {
      l_strErrorRecovery = Translate("Next. Command repeated on next sequence position.");
    }
    if (i_intErrorRecovery == 12)
    {
      l_strErrorRecovery = Translate("Available. Available volume used.");
    }
    if (l_strMainError == "unknown error")
    {
      l_strMainError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strSlaveError == "unknown error")
    {
      l_strSlaveError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strErrorRecovery == "unknown error")
    {
      l_strErrorRecovery = Translate(" error not translated by library - check log file to retrieve data");
    }
    l_strMainError = StrConcat4(l_strMainError, Translate(" - code : "), i_intMainError, Translate(""));
    l_strSlaveError = StrConcat4(l_strSlaveError, Translate(" - code : "), i_intSlaveError, Translate(""));
    l_strErrorRecovery = StrConcat4(l_strErrorRecovery, Translate(" - code : "), i_intErrorRecovery, Translate(""));
    l_intErrorValue = l_intErrorValue + i_intMainError;
    l_intErrorValue = l_intErrorValue + i_intSlaveError;
    l_intErrorValue = l_intErrorValue + i_intErrorRecovery;
    if (l_intErrorValue == 0)
    {
      o_strTranslatedLoadCarrierInformaton = Translate("Autoload step successful");
    }
    else
    {
      o_strTranslatedLoadCarrierInformaton = StrConcat8(l_strMainError, Translate(" ; "), l_strSlaveError, Translate(" ; "), l_strErrorRecovery, Translate(""), Translate(""), Translate(""));
      TRACELEVEL::Trace_08(TRACE_LEVEL_RELEASE, Translate("Main error : "), i_intMainError, Translate(" +++ Slave error : "), i_intSlaveError, Translate(" +++ Recovery button : "), i_intErrorRecovery, Translate(""), Translate(""));
    }
    if(0){
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
    }
  }

  function Init( device & ML_STAR, variable i_strFullPathReportFile, variable i_blnDeactivateLoadingCarrierSteps, variable i_blnActivateIntegratedAbortHandler, variable i_intAutoloadParkingPosition, variable & o_strControllerNameAndVersion ) void {
    private variable l_strTransferVolume;
    private variable l_strPosIDTarget;
    private variable l_strTranslatedPipettingInformationDispense;
    private variable l_strTranslatedPipettingInformationAspiration;
    private variable l_intReturnValue;
    private variable l_strLabIDSource;
    private variable l_strCurrentTime;
    private variable l_strCurrentDate;
    private variable l_strTranslatedTransportInformation;
    private variable l_strPosIDSource;
    private variable l_strLabIDTarget;
    private variable l_strBarcodeInformation;
    private file l_hdlARWReportFile;
    private variable l_strGetTypeOfVariable;
    private variable l_strDeviceViewName;
    private variable l_strFunctionName;
    private variable l_strAbortMessage;
    o_strControllerNameAndVersion = 0;
    t_intTraceLevel = TRACELEVEL::GetTraceLevel();
    t_strControllerVersion = Translate("3.0.0");
    l_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    l_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    t_strLibraryNameWithoutExtension = HSLExtensions::File::GetFileNameWithoutExtension(t_strLibraryName);
    o_strControllerNameAndVersion = StrConcat4(t_strLibraryNameWithoutExtension, Translate(" "), t_strControllerVersion, Translate(""));
    onerror goto errLabel_2 ;
    err.Clear();
    l_intReturnValue = VectorCustomDialogs::Initialize();
    _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValue);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Return value of init vector custom dialogs : "), l_intReturnValue);
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    t_blnDeactivateLoadingCarrierSteps = i_blnDeactivateLoadingCarrierSteps;
    t_blnActivateIntegratedAbortHandler = i_blnActivateIntegratedAbortHandler;
    t_intAutoloadParkingPosition = i_intAutoloadParkingPosition;
    l_strGetTypeOfVariable = StrGetType(i_strFullPathReportFile);
    if (l_strGetTypeOfVariable == "i")
    {
      i_strFullPathReportFile = StrIStr(i_strFullPathReportFile);
    }
    l_strDeviceName = DevGetInstrumentName(ML_STAR);
    l_strDeviceViewName = DevGetInstrumentViewName(ML_STAR);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("l_strDeviceName : "), l_strDeviceName, Translate(" - l_strDeviceViewName : "), l_strDeviceViewName);
    if (i_strFullPathReportFile == "")
    {
      l_strCurrentDate = TimGetFormattedDate(Translate("%Y%m%d"));
      l_strCurrentTime = TimGetFormattedTime(Translate("%H%M%S"));
      t_strFullPathReportFile = StrConcat12(Translate("C:\\Program Files (x86)\\HAMILTON\\LogFiles\\"), l_strCurrentDate, Translate("_"), l_strCurrentTime, Translate("_"), Translate("LoadCarrier_Report"), Translate(""), Translate(""), Translate(".xls"), Translate(""), Translate(""), Translate(""));
      onerror goto errLabel_3 ;
      err.Clear();
      l_hdlARWReportFile.SetExtendedProperties( "HDR=NO");
      l_hdlARWReportFile.AddField("Date", l_strCurrentDate, hslString, 255);
      l_hdlARWReportFile.AddField("Time", l_strCurrentTime, hslString, 255);
      l_hdlARWReportFile.AddField("LabID Source", l_strLabIDSource, hslString, 255);
      l_hdlARWReportFile.AddField("PosID Source", l_strPosIDSource, hslString, 255);
      l_hdlARWReportFile.AddField("Transfer Volume", l_strTransferVolume, hslString, 255);
      l_hdlARWReportFile.AddField("LabID Target", l_strLabIDTarget, hslString, 255);
      l_hdlARWReportFile.AddField("PosID Target", l_strPosIDTarget, hslString, 255);
      l_hdlARWReportFile.AddField("Barcode", l_strBarcodeInformation, hslString, 255);
      l_hdlARWReportFile.AddField("Transport information", l_strTranslatedTransportInformation, hslString, 255);
      l_hdlARWReportFile.AddField("Aspiration information", l_strTranslatedPipettingInformationAspiration, hslString, 255);
      l_hdlARWReportFile.AddField("Dispense information", l_strTranslatedPipettingInformationDispense, hslString, 255);
      if( 0 == l_hdlARWReportFile.Open(t_strFullPathReportFile + " " + "RuntimeReport", hslWrite) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
      }
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        l_strAbortMessage = StrConcat4(Translate("There was an issue creating the run report file at\n"), t_strFullPathReportFile, Translate("\nto store data regarding loading of carriers."), Translate("\n\n The method will abort."));
        _DATA_IntegratedAbortHandler(l_strFunctionName, l_strAbortMessage);
      }   /* end if from skip handler if no error */
      if( 0 != l_hdlARWReportFile.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      l_hdlARWReportFile.RemoveFields();
    }
    else
    {
      t_strFullPathReportFile = i_strFullPathReportFile;
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void {
    private variable l_intReturnValueDialog;
    private variable l_strAbortMessage;
    private variable l_strFunctionName;
    private variable l_arrAbortHandlerMessage[];
    private variable l_intReturnValue;
    if (t_blnActivateIntegratedAbortHandler == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    onerror goto errLabel_4 ;
    err.Clear();
    l_intReturnValue = VectorCustomDialogs::Initialize();
    _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValue);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Return value of init vector custom dialogs : "), l_intReturnValue);
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    l_strFunctionName = StrConcat2(Translate("Affected library : "), i_strFunctionName);
    l_strAbortMessage = StrConcat2(Translate("Abort message : "), i_strAbortMessage);
    l_arrAbortHandlerMessage.SetSize(0);
    l_arrAbortHandlerMessage.AddAsLast(l_strFunctionName);
    l_arrAbortHandlerMessage.AddAsLast(l_strAbortMessage);
    l_intReturnValueDialog = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Internal abort handler message :  "), Translate("Error occurred - abort routine started - Press OK to abort the run."), l_arrAbortHandlerMessage);
    _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Return value of LoadCarrier Integrated Abort Handler : "), l_intReturnValue);
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, Translate(" <- "));
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, l_strFunctionName, t_strLibraryName, Translate(""));
    abort;
  }

  private function _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToReport( device & ML_STAR, variable i_strStepReturnValue3LoadingStep, variable i_strStepReturnValue4LoadingStep ) void {
    private variable l_bln_ErrorOpeningFile;
    private variable l_strEmptyString;
    private variable l_intGetErrorRecovery;
    private variable l_strCurrentTime;
    private variable l_strCurrentDate;
    private variable l_strCurrentLabIDSource;
    private variable loopCounter1;
    private variable l_intGetSlaveErrorCode;
    private variable l_intGetMainErrorCode;
    private variable l_strTranslatedLoadingInformation;
    private variable l_strGetStepData;
    private variable l_strLabwareID;
    private variable l_strBarcodeCarrier;
    private variable l_strCurrentPosIDSource;
    private timer l_timer_RecoverError;
    private file l_hdlNGSStarReportFile2;
    private variable l_int_rtnErrorDialog;
    private variable l_strCarrierID;
    private variable l_intIndexNumberOfPositions;
    private variable l_strBarcodeLabware;
    private variable l_strPosition;
    private variable l_intNumberOfPositionsStepReturnValue4LoadingStep;
    private variable l_strMessageManualLoadingStep;
    private variable l_strCarrierLabelName;
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    l_strEmptyString = Translate("");
    l_bln_ErrorOpeningFile = ASWGLOBAL::BOOL::TRUE;
    {
      loopCounter1 = 0;
      while (l_bln_ErrorOpeningFile == ASWGLOBAL::BOOL::TRUE)
      {
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_5 ;
        err.Clear();
        l_hdlNGSStarReportFile2.AddField("Date", l_strCurrentDate, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("Time", l_strCurrentTime, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("LabID Source", l_strCurrentLabIDSource, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("PosID Source", l_strCurrentPosIDSource, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("LabID Target", l_strEmptyString, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("PosID Target", l_strEmptyString, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("Barcode", l_strGetStepData, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("Transport information", l_strTranslatedLoadingInformation, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("Aspiration information", l_strEmptyString, hslString, 255);
        l_hdlNGSStarReportFile2.AddField("Dispense information", l_strEmptyString, hslString, 255);
        if( 0 == l_hdlNGSStarReportFile2.Open(t_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
        }
        l_bln_ErrorOpeningFile = ASWGLOBAL::BOOL::FALSE;
        errLabel_5 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          l_bln_ErrorOpeningFile = ASWGLOBAL::BOOL::TRUE;
          if( 0 == l_timer_RecoverError.SetTimer(2) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_timer_RecoverError.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if (loopCounter1 == 3)
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::ErrorDialog(Translate("Report file handling."), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 999, Translate("There is a problem to open the report file."), Translate("System has to abort."));
            _DATA_TranslateVectorCustomDialogsErrorCodes(l_int_rtnErrorDialog);
          }
        }   /* end if from skip handler if no error */
      }
    }
    l_strCurrentDate = Translate("------------------------------");
    l_strCurrentTime = Translate("");
    l_strCurrentLabIDSource = Translate("");
    l_strCurrentPosIDSource = Translate("");
    l_strGetStepData = Translate("");
    l_strTranslatedLoadingInformation = Translate("");
    if( 0 == l_hdlNGSStarReportFile2.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_strCurrentDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    l_strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_strStepReturnValue3LoadingStep : "), i_strStepReturnValue3LoadingStep);
    l_strCarrierID = StepReturn::GetLabwareId(1, i_strStepReturnValue3LoadingStep);
    l_strBarcodeCarrier = StepReturn::GetBarcode(1, i_strStepReturnValue3LoadingStep);
    HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strCarrierLabelName, Translate("MlStarCarLabelName"), l_strCarrierID);
    if (l_strCarrierLabelName != "")
    {
      l_strCarrierID = l_strCarrierLabelName;
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("l_strCarrierID: "), l_strCarrierID, Translate("; l_strBarcodeCarrier: "), l_strBarcodeCarrier);
    l_strCurrentLabIDSource = StrConcat4(Translate("Load carrier: "), Translate(""), Translate(""), l_strCarrierID);
    l_strGetStepData = l_strBarcodeCarrier;
    l_intGetMainErrorCode = StepReturn::GetMainError(1, i_strStepReturnValue3LoadingStep);
    l_intGetSlaveErrorCode = StepReturn::GetSlaveError(1, i_strStepReturnValue3LoadingStep);
    l_intGetErrorRecovery = StepReturn::GetRecoveryButton(1, i_strStepReturnValue3LoadingStep);
    _DATA_TranslateAutoLoadOrIDLErrorCodes(l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedLoadingInformation);
    if (l_intGetMainErrorCode != 0|| l_intGetSlaveErrorCode != 0)
    {
      l_strMessageManualLoadingStep = StrConcat12(Translate("There was an issue while loading the carrier with the following ID: "), Translate("\n\n"), l_strCarrierID, Translate(""), Translate(""), Translate("\n\n"), Translate("Please load the requested carrier manually."), Translate("\n\n"), Translate("Press OK after loading step has been performed and the system has been closed again."), Translate(""), Translate(""), Translate(""));
      l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Load Carrier Error"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, l_strMessageManualLoadingStep);
      _DATA_TranslateVectorCustomDialogsErrorCodes(l_int_rtnErrorDialog);
    }
    if( 0 == l_hdlNGSStarReportFile2.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_strStepReturnValue4LoadingStep : "), i_strStepReturnValue4LoadingStep);
    l_intNumberOfPositionsStepReturnValue4LoadingStep = StepReturn::GetNumberOfPositions(i_strStepReturnValue4LoadingStep);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("The following number of positions are located on this carrier : "), l_intNumberOfPositionsStepReturnValue4LoadingStep);
    {
      for(l_intIndexNumberOfPositions = 0; l_intIndexNumberOfPositions < l_intNumberOfPositionsStepReturnValue4LoadingStep;)
      {
        l_intIndexNumberOfPositions = l_intIndexNumberOfPositions + 1;
        l_strLabwareID = StepReturn::GetLabwareId(l_intIndexNumberOfPositions, i_strStepReturnValue4LoadingStep);
        l_strBarcodeLabware = StepReturn::GetBarcode(l_intIndexNumberOfPositions, i_strStepReturnValue4LoadingStep);
        l_strPosition = StepReturn::GetPosition(l_intIndexNumberOfPositions, i_strStepReturnValue4LoadingStep);
        TRACELEVEL::Trace_08(TRACE_LEVEL_DEBUG, Translate("l_strLabwareID: "), l_strLabwareID, Translate("; l_strBarcodeLabware: "), l_strBarcodeLabware, Translate("; l_strPosition"), l_strPosition, Translate(""), Translate(""));
        l_strCurrentLabIDSource = l_strLabwareID;
        l_strCurrentPosIDSource = l_strPosition;
        l_strGetStepData = l_strBarcodeLabware;
        if (l_strGetStepData == "")
        {
          l_strGetStepData = Translate("Barcode not read");
        }
        l_intGetMainErrorCode = StepReturn::GetMainError(l_intIndexNumberOfPositions, i_strStepReturnValue4LoadingStep);
        l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intIndexNumberOfPositions, i_strStepReturnValue4LoadingStep);
        l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intIndexNumberOfPositions, i_strStepReturnValue4LoadingStep);
        _DATA_TranslateAutoLoadOrIDLErrorCodes(l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedLoadingInformation);
        l_strCurrentDate = Translate("");
        l_strCurrentTime = Translate("");
        if( 0 == l_hdlNGSStarReportFile2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != l_hdlNGSStarReportFile2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlNGSStarReportFile2.RemoveFields();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  function UnloadCarrierByCarrierID( device & ML_STAR, variable i_strCarrierIDToBeUnloaded ) void {
    private variable l_int_rtnErrorDialog;
    private variable l_strMessageCarrierUnloadable;
    private variable l_strResultIsLoadable;
    private variable l_strMessageReportFile;
    private variable l_strStepReturnValueCarrier;
    private variable l_strCarrierLabelName;
    private variable l_strLoadCarrierMessage;
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    if (i_strCarrierIDToBeUnloaded == "")
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("No Carrier ID to be unloaded ."), Translate(""));
      return;
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Carrier ID to be unloaded : "), i_strCarrierIDToBeUnloaded);
    }
    if (t_blnDeactivateLoadingCarrierSteps == ASWGLOBAL::BOOL::FALSE)
    {
      HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strResultIsLoadable, Translate("MlStarCarIsLoadable"), i_strCarrierIDToBeUnloaded);
      if (l_strResultIsLoadable == "1")
      {
        l_strMessageReportFile = StrConcat4(Translate("Unload carrier: "), i_strCarrierIDToBeUnloaded, Translate(""), Translate(""));
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_strStepReturnValueCarrier: "), l_strStepReturnValueCarrier);
        HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strCarrierLabelName, Translate("MlStarCarLabelName"), i_strCarrierIDToBeUnloaded);
        if (l_strCarrierLabelName == "")
        {
          l_strLoadCarrierMessage = StrConcat4(Translate("Unload carrier: "), i_strCarrierIDToBeUnloaded, Translate(""), Translate(""));
        }
        else
        {
          l_strLoadCarrierMessage = StrConcat4(Translate("Unload carrier: "), l_strCarrierLabelName, Translate(""), Translate(""));
        }
        VectorCustomDialogs::AppendStatusText(l_strLoadCarrierMessage);
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
          	l_strStepReturnValueCarrier = arrRetValues[2];
        }
        _DATA_UpdateInformationIntoReportFile(l_strMessageReportFile);
      }
      else
      {
        l_strMessageCarrierUnloadable = StrConcat4(Translate("The carrier with the Carrier ID: "), i_strCarrierIDToBeUnloaded, Translate(" is not a loadable carrier. Unloading cannot be performed."), Translate(""));
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(""), l_strMessageCarrierUnloadable);
        _DATA_UpdateInformationIntoReportFile(l_strMessageCarrierUnloadable);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_int_rtnErrorDialog);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  function LoadCarrierByCarrierID( device & ML_STAR, variable i_strCarrierIDToBeLoaded, variable i_strPositionsToBeScanned ) void {
    private variable l_strStepReturnValuePositions;
    private variable l_strStepReturnValueCarrier;
    private variable l_strResultIsLoadable;
    private variable l_arrVisibility[];
    private variable l_strBarcodeWidth;
    private variable l_strBarcodeHeight;
    private variable l_strBarcodeDistToDeck;
    private variable l_strBarcodeYTrigger;
    private variable l_blnNoCustomWindowOfInterest;
    private variable l_strCarrierUnloadable;
    private variable l_strCarrierLabelName;
    private variable l_strLoadCarrierMessage;
    private variable l_strFunctionName;
    private variable l_strErrorMessageLoadingCarrier;
    private variable l_intReturnValue;
    private variable l_strErrorMessageLoadingCarrierReportFile;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    if (i_strCarrierIDToBeLoaded == "")
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("No Carrier ID to be loaded ."), Translate(""));
      return;
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Carrier ID to be loaded : "), i_strCarrierIDToBeLoaded);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_strPositionsToBeScanned: "), i_strPositionsToBeScanned);
    l_arrVisibility.SetSize(0);
    if (t_blnDeactivateLoadingCarrierSteps == ASWGLOBAL::BOOL::FALSE)
    {
      HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strResultIsLoadable, Translate("MlStarCarIsLoadable"), i_strCarrierIDToBeLoaded);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strResultIsLoadable "), l_strResultIsLoadable);
      if (l_strResultIsLoadable == "1")
      {
        HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strCarrierLabelName, Translate("MlStarCarLabelName"), i_strCarrierIDToBeLoaded);
        if (l_strCarrierLabelName == "")
        {
          l_strLoadCarrierMessage = StrConcat4(Translate("Load carrier: "), i_strCarrierIDToBeLoaded, Translate(""), Translate(""));
        }
        else
        {
          l_strLoadCarrierMessage = StrConcat4(Translate("Load carrier: "), l_strCarrierLabelName, Translate(""), Translate(""));
        }
        VectorCustomDialogs::AppendStatusText(l_strLoadCarrierMessage);
        HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strBarcodeWidth, Translate("MlStarBarcodeWidth"), i_strCarrierIDToBeLoaded);
        HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strBarcodeHeight, Translate("MlStarBarcodeHeight"), i_strCarrierIDToBeLoaded);
        HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strBarcodeDistToDeck, Translate("MlStarBarcodeDistToDeck"), i_strCarrierIDToBeLoaded);
        HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strBarcodeYTrigger, Translate("MlStarBarcodeYTrigger"), i_strCarrierIDToBeLoaded);
        TRACELEVEL::Trace_08(TRACE_LEVEL_DEBUG, Translate("l_strBarcodeHeight: "), l_strBarcodeHeight, Translate("; l_strBarcodeWidth: "), l_strBarcodeWidth, Translate("; l_strBarcodeDistToDeck: "), l_strBarcodeDistToDeck, Translate("; l_strBarcodeYTrigger: "), l_strBarcodeYTrigger);
        if (l_strBarcodeWidth == ""|| l_strBarcodeHeight == ""|| l_strBarcodeDistToDeck == ""|| l_strBarcodeYTrigger == "")
        {
          l_blnNoCustomWindowOfInterest = ASWGLOBAL::BOOL::TRUE;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("The size of the barcode custom window of interest could not be retrieved from the labware properties of the deck layout."), Translate(" Barcode reading will be performed with the default barcode window."));
        }
        onerror goto errLabel_6 ;
        err.Clear();
        if (l_blnNoCustomWindowOfInterest == ASWGLOBAL::BOOL::TRUE)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepReturnValueCarrier = arrRetValues[2];
            	l_strStepReturnValuePositions = arrRetValues[3];
          }
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            	l_strStepReturnValueCarrier = arrRetValues[2];
            	l_strStepReturnValuePositions = arrRetValues[3];
          }
        }
        _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToReport(ML_STAR, l_strStepReturnValueCarrier, l_strStepReturnValuePositions);
        errLabel_6 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
          l_strErrorMessageLoadingCarrier = StrConcat12(Translate("There was an issue while loading the carrier with the following ID: "), Translate("\n\n"), i_strCarrierIDToBeLoaded, Translate("\n\n"), Translate("Possible error: no carrier or wrong carrier."), Translate("\n\n"), Translate("Please load the requested carrier manually."), Translate("\n\n"), Translate("Press OK once the carrier has been loaded."), Translate("\n"), Translate("If you are uncertain of the accuracy of the carrier\nplease press CANCEL to abort the run and revise the method."), Translate(""));
          l_intReturnValue = VectorCustomDialogs::ErrorDialog(Translate("Carrier Loading Error"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, l_strErrorMessageLoadingCarrier, Translate(""));
          if (l_intReturnValue == ASWGLOBAL::DIALOG::CANCEL)
          {
            _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Difficulties with loading of carrier. User intervention requested to load carrier manually. Abort requested by user."));
          }
          l_strErrorMessageLoadingCarrierReportFile = StrConcat12(Translate("There was a problem loading the carrier: "), Translate(""), i_strCarrierIDToBeLoaded, Translate(""), Translate(""), Translate(""), Translate(". Request for manual carrier loading."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          _DATA_UpdateInformationIntoReportFile(l_strErrorMessageLoadingCarrierReportFile);
        }   /* end if from skip handler if no error */
      }
      else
      {
        l_strCarrierUnloadable = StrConcat4(Translate("The carrier with the Carrier ID: "), i_strCarrierIDToBeLoaded, Translate(" is not a loadable carrier. Loading cannot be performed."), Translate(""));
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(""), l_strCarrierUnloadable);
        _DATA_UpdateInformationIntoReportFile(l_strCarrierUnloadable);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  private function _GetDistinctSortedCarriersFromCarrierIDs( device & Instrument, variable & i_arr_TemplateIDs[], variable & o_arr_TemplateIDsDistinct[] ) void {
    private variable l_carrier_ID;
    private variable l_arr_TemplateIDsDistinct[];
    private variable l_int_NumberOfCarrierIDs;
    private variable IndexCarrierID;
    private variable l_fltPositionX;
    private variable l_fltPositionY;
    private variable l_fltPositionZ;
    private variable l_fltPositionR;
    private variable l_arr_XCoordinates[];
    private variable l_arr_XCoordinatesDistinct[];
    private variable hdl_ReturnValue;
    private variable l_strFunctionName;
    o_arr_TemplateIDsDistinct.SetSize( 0);
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    l_arr_XCoordinates.SetSize(0);
    l_arr_TemplateIDsDistinct.SetSize(0);
    l_arr_XCoordinatesDistinct.SetSize(0);
    l_int_NumberOfCarrierIDs=i_arr_TemplateIDs.GetSize();
    if (l_int_NumberOfCarrierIDs != 0)
    {
      l_carrier_ID = Translate("");
      l_fltPositionX = 0.0;
      l_fltPositionY = 0.0;
      l_fltPositionZ = 0.0;
      l_fltPositionR = 0.0;
      {
        for(IndexCarrierID = 0; IndexCarrierID < l_int_NumberOfCarrierIDs;)
        {
          IndexCarrierID = IndexCarrierID + 1;
          l_carrier_ID=i_arr_TemplateIDs.GetAt(IndexCarrierID-1);
          HSLLabwrAccess::AbsolutePositionValuesGetForLabwareID(Instrument, l_carrier_ID, l_fltPositionX, l_fltPositionY, l_fltPositionZ, l_fltPositionR);
          hdl_ReturnValue = ARRAYTOOLS::Lookup(l_arr_TemplateIDsDistinct, l_carrier_ID);
          if (hdl_ReturnValue == 0)
          {
            l_arr_TemplateIDsDistinct.AddAsLast(l_carrier_ID);
            l_arr_XCoordinatesDistinct.AddAsLast(l_fltPositionX);
          }
        }
      }
      ARRAYTOOLS::Sort3ArraysByNumericAscendingOrder(l_arr_XCoordinatesDistinct, l_arr_TemplateIDsDistinct, l_arr_TemplateIDsDistinct);
    }
    else
    {
      MECC::TraceComment(Translate("Array containing carrier IDs to sort is empty; no sorting performed"));
    }
    o_arr_TemplateIDsDistinct=l_arr_TemplateIDsDistinct;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  function UnloadTipCarrierByTipCounterNames( device & ML_STAR, variable & i_arrTipcounterNames[] ) void {
    private variable l_strCarrierIDToUnload;
    private variable l_intIndexTipCounterName;
    private variable l_intSizeOfArrCarrierIDsDistinct;
    private variable l_intCarrierIDIndex;
    private variable l_int_rtnErrorDialog;
    private variable l_intSizeArrayTipCounterNames;
    private sequence l_seqCurrentTips;
    private variable l_arrCarrierIDsDistinct[];
    private sequence l_seqAllTips;
    private variable l_intReturnValue;
    private variable l_strMessageReportFile;
    private variable l_GetNextCurrentTips;
    private variable l_strMessageCarrierUnloadable;
    private variable l_strResultIsLoadable;
    private variable l_strCarrierLabelName;
    private variable l_strLoadCarrierMessage;
    private variable l_strStepReturnValueCarrier;
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    l_intSizeArrayTipCounterNames=i_arrTipcounterNames.GetSize();
    if (l_intSizeArrayTipCounterNames == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("No Tipcounters to be unloaded ."), Translate("Array contains no Tipcounter names."));
      return;
    }
    else
    {
      TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Tipcounter names to be unloaded: "), i_arrTipcounterNames);
    }
    SeqRemoveAll(l_seqAllTips);
    {
      for(l_intIndexTipCounterName = 0; l_intIndexTipCounterName < l_intSizeArrayTipCounterNames;)
      {
        l_intIndexTipCounterName = l_intIndexTipCounterName + 1;
        l_intReturnValue = TIPMANAGEMENTLIBRARY::Counter_GetSequenceFromName(i_arrTipcounterNames.ElementAt( l_intIndexTipCounterName -1), l_seqCurrentTips);
        l_GetNextCurrentTips = SeqGetNext(l_seqCurrentTips);
        if (l_GetNextCurrentTips == 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("No tips have been selected for the following tip counter - no carriers will be unloaded: "), i_arrTipcounterNames.ElementAt( l_intIndexTipCounterName -1));
        }
        else
        {
          l_seqAllTips = HSLExtensions::Sequence::Concat(l_seqAllTips, l_seqCurrentTips, 0);
        }
      }
    }
    _GetDistinctSortedCarriersFromSequence(ML_STAR, l_seqAllTips, l_arrCarrierIDsDistinct);
    l_intSizeOfArrCarrierIDsDistinct=l_arrCarrierIDsDistinct.GetSize();
    if (t_blnDeactivateLoadingCarrierSteps == ASWGLOBAL::BOOL::FALSE)
    {
      {
        for(l_intCarrierIDIndex = 0; l_intCarrierIDIndex < l_intSizeOfArrCarrierIDsDistinct;)
        {
          l_intCarrierIDIndex = l_intCarrierIDIndex + 1;
          l_strCarrierIDToUnload=l_arrCarrierIDsDistinct.GetAt(l_intCarrierIDIndex-1);
          HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strResultIsLoadable, Translate("MlStarCarIsLoadable"), l_strCarrierIDToUnload);
          if (l_strResultIsLoadable == "1")
          {
            l_strMessageReportFile = StrConcat4(Translate("Unload carrier: "), l_strCarrierIDToUnload, Translate(""), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_strStepReturnValueCarrier: "), l_strStepReturnValueCarrier);
            HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strCarrierLabelName, Translate("MlStarCarLabelName"), l_strCarrierIDToUnload);
            if (l_strCarrierLabelName == "")
            {
              l_strLoadCarrierMessage = StrConcat4(Translate("Unload carrier: "), l_strCarrierIDToUnload, Translate(""), Translate(""));
            }
            else
            {
              l_strLoadCarrierMessage = StrConcat4(Translate("Unload carrier: "), l_strCarrierLabelName, Translate(""), Translate(""));
            }
            VectorCustomDialogs::AppendStatusText(l_strLoadCarrierMessage);
            ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            _DATA_UpdateInformationIntoReportFile(l_strMessageReportFile);
          }
          else
          {
            l_strMessageCarrierUnloadable = StrConcat4(Translate("The carrier with the Carrier ID: "), l_strCarrierIDToUnload, Translate(" is not a loadable carrier. Unloading cannot be performed."), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(""), l_strMessageCarrierUnloadable);
            _DATA_UpdateInformationIntoReportFile(l_strMessageCarrierUnloadable);
            _DATA_TranslateVectorCustomDialogsErrorCodes(l_int_rtnErrorDialog);
          }
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  private function _DATA_UpdateInformationIntoReportFile( variable i_strInformationToUpdateReportList ) void {
    private variable l_bln_ErrorOpeningFile;
    private variable l_strEmptyString;
    private variable l_int_rtnErrorDialog;
    private variable loopCounter1;
    private timer l_timer_RecoverError;
    private file l_hdlNGSStarReportFile2;
    private variable l_strCurrentTime;
    private variable l_strCurrentDate;
    private variable l_strCurrentLabIDSource;
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    l_strEmptyString = Translate("");
    onerror goto errLabel_7 ;
    err.Clear();
    l_hdlNGSStarReportFile2.AddField("Date", l_strCurrentDate, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Time", l_strCurrentTime, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Source", l_strCurrentLabIDSource, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Source", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Target", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Target", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Barcode", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transport information", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Aspiration information", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Dispense information", l_strEmptyString, hslString, 255);
    if( 0 == l_hdlNGSStarReportFile2.Open(t_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
    }
    l_bln_ErrorOpeningFile = ASWGLOBAL::BOOL::FALSE;
    errLabel_7 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      l_bln_ErrorOpeningFile = ASWGLOBAL::BOOL::TRUE;
      if( 0 == l_timer_RecoverError.SetTimer(2) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == l_timer_RecoverError.WaitTimer(hslFalse, hslFalse) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if (loopCounter1 == 3)
      {
        l_int_rtnErrorDialog = VectorCustomDialogs::ErrorDialog(Translate("Report file handling."), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 999, Translate("There is a problem to open the report file."), Translate("System has to abort."));
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_int_rtnErrorDialog);
      }
    }   /* end if from skip handler if no error */
    l_strCurrentDate = Translate("------------------------------");
    l_strCurrentTime = Translate("");
    l_strCurrentLabIDSource = Translate("");
    if( 0 == l_hdlNGSStarReportFile2.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_strCurrentDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    l_strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    l_strCurrentLabIDSource = i_strInformationToUpdateReportList;
    if( 0 == l_hdlNGSStarReportFile2.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != l_hdlNGSStarReportFile2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlNGSStarReportFile2.RemoveFields();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  private function _GetDistinctSortedCarriersFromSequence( device & Instrument, sequence i_seq, variable & o_arr_TemplateIDs[] ) void {
    private variable l_NumberOfLabwareIDs;
    private variable IndexLabwareIDs;
    private variable l_site_ID;
    private variable l_carrier_ID;
    private variable l_labware_ID;
    private variable l_arr_TemplateIDsDistinct[];
    private variable l_arr_LabwareIDs[];
    private variable l_arr_TemplateIDs[];
    private variable l_strFunctionName;
    o_arr_TemplateIDs.SetSize( 0);
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    l_site_ID = Translate("");
    l_carrier_ID = Translate("");
    l_arr_LabwareIDs.SetSize(0);
    l_arr_TemplateIDs.SetSize(0);
    l_arr_TemplateIDsDistinct.SetSize(0);
    SeqGetLabwareIds(i_seq, l_arr_LabwareIDs);
    l_NumberOfLabwareIDs=l_arr_LabwareIDs.GetSize();
    if (l_NumberOfLabwareIDs != 0)
    {
      {
        for(IndexLabwareIDs = 0; IndexLabwareIDs < l_NumberOfLabwareIDs;)
        {
          IndexLabwareIDs = IndexLabwareIDs + 1;
          l_labware_ID = l_arr_LabwareIDs.ElementAt( IndexLabwareIDs -1);
          HSLLabwrAccess::GetTemplateIDAndTemplateSiteID(Instrument, l_labware_ID, l_carrier_ID, l_site_ID);
          if (l_carrier_ID == "default")
          {
            l_carrier_ID = l_labware_ID;
          }
          l_arr_TemplateIDs.AddAsLast(l_carrier_ID);
        }
      }
      _GetDistinctSortedCarriersFromCarrierIDs(Instrument, l_arr_TemplateIDs, l_arr_TemplateIDsDistinct);
    }
    else
    {
      MECC::TraceComment(Translate("Sequence to be sorted is empty; no sorting performed"));
    }
    o_arr_TemplateIDs=l_arr_TemplateIDsDistinct;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  function UnloadAllCarriers( device & ML_STAR ) void {
    private variable l_strMessageReportFile;
    private variable l_strCarrierLabelName;
    private variable l_strLoadCarrierMessage;
    private variable l_strStepReturnValueCarrier;
    private variable l_strResultIsLoadable;
    private sequence o_arr_sequences[];
    private variable loopCounter1;
    private variable l_intNumberOfSequences;
    private sequence l_seqTotalSequence;
    private variable o_arr_sequenceNames[];
    private variable l_strCurrentCarrierID;
    private variable loopCounter2;
    private variable l_intNumberOfCarriersToUnload;
    private variable l_arr_AllTemplatesSorted[];
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    o_arr_sequences.SetSize(0);
    o_arr_sequenceNames.SetSize(0);
    {
         object objDeckLayout;
         //object objLabware;
         object objEditDeckLayout8;
         object objSequenceNames;
         variable i;
         sequence tmpSeq;
         objDeckLayout = ML_STAR.GetDeckLayoutObject();
         if(!objDeckLayout.IsNull())
         {
              objDeckLayout.GetObject("IEditDeckLayout8", objEditDeckLayout8);
              objEditDeckLayout8.DeckSequenceNames(objSequenceNames);
              for(i=1; i<=objSequenceNames.Count; i++){
                   o_arr_sequenceNames.AddAsLast(objSequenceNames.Item(i));
                   DevGetSequence(ML_STAR, objSequenceNames.Item(i), tmpSeq);
                   o_arr_sequences.AddAsLast(tmpSeq);
              }
         }
         objDeckLayout.ReleaseObject();
         objEditDeckLayout8.ReleaseObject();
    }
    l_intNumberOfSequences=o_arr_sequenceNames.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < l_intNumberOfSequences;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 == 1)
        {
          SeqCopySequence(l_seqTotalSequence, o_arr_sequences.ElementAt( loopCounter1 -1));
        }
        else
        {
          l_seqTotalSequence = HSLExtensions::Sequence::Concat(l_seqTotalSequence, o_arr_sequences.ElementAt( loopCounter1 -1), ASWGLOBAL::BOOL::TRUE);
        }
      }
    }
    _GetDistinctSortedCarriersFromSequence(ML_STAR, l_seqTotalSequence, l_arr_AllTemplatesSorted);
    l_intNumberOfCarriersToUnload=l_arr_AllTemplatesSorted.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < l_intNumberOfCarriersToUnload;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_strCurrentCarrierID = l_arr_AllTemplatesSorted.ElementAt( loopCounter2 -1);
        HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strResultIsLoadable, Translate("MlStarCarIsLoadable"), l_strCurrentCarrierID);
        if (l_strResultIsLoadable == "1")
        {
          l_strMessageReportFile = StrConcat4(Translate("Unload carrier: "), l_strCurrentCarrierID, Translate(""), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_strStepReturnValueCarrier: "), l_strStepReturnValueCarrier);
          HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strCarrierLabelName, Translate("MlStarCarLabelName"), l_strCurrentCarrierID);
          if (l_strCarrierLabelName == "")
          {
            l_strLoadCarrierMessage = StrConcat4(Translate("Unload carrier: "), l_strCurrentCarrierID, Translate(""), Translate(""));
          }
          else
          {
            l_strLoadCarrierMessage = StrConcat4(Translate("Unload carrier: "), l_strCarrierLabelName, Translate(""), Translate(""));
          }
          VectorCustomDialogs::AppendStatusText(l_strLoadCarrierMessage);
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            	l_strStepReturnValueCarrier = arrRetValues[2];
          }
          _DATA_UpdateInformationIntoReportFile(l_strMessageReportFile);
        }
        else
        {
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  function LoadTipCarrierByTipCounterNames( device & ML_STAR, variable & i_arrTipcounterNames[], variable i_blnBarcodeReadingActivated ) void {
    private variable l_strBarcodeWidth;
    private variable l_strBarcodeDistToDeck;
    private variable l_strCarrierLabelName;
    private variable l_strLoadCarrierMessage;
    private variable l_strCarrierIDToLoad;
    private variable l_strBarcodeHeight;
    private variable l_strStepReturnValuePositions;
    private variable l_strStepReturnValueCarrier;
    private variable l_strCarrierUnloadable;
    private variable l_strResultIsLoadable;
    private variable l_strBarcodeYTrigger;
    private variable l_strFunctionName;
    private variable l_intSizeArrayTipCounterNames;
    private variable l_arr_PositionIDs[];
    private variable l_arr_TemplateIDs[];
    private variable l_arrTipcounterNames[];
    private variable l_intSizeOfTemplateIDs;
    private variable l_strPositionIDsToScan;
    private variable l_intTemplateIDIndex;
    private variable l_blnNoCustomWindowOfInterest;
    private variable l_strErrorMessageLoadingCarrier;
    private variable l_intReturnValue;
    private variable l_strErrorMessageLoadingCarrierReportFile;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    l_intSizeArrayTipCounterNames=i_arrTipcounterNames.GetSize();
    if (l_intSizeArrayTipCounterNames == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("No Tipcounters to be loaded ."), Translate("Array contains no Tipcounter names."));
      return;
    }
    else
    {
      TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Tipcounter names to be loaded: "), i_arrTipcounterNames);
    }
    if (t_blnDeactivateLoadingCarrierSteps == ASWGLOBAL::BOOL::FALSE)
    {
      l_arrTipcounterNames = HSLExtensions::Array::Copy(i_arrTipcounterNames);
      _GetDistinctSortedCarriersAndPositionIDsFromTipCounters(ML_STAR, l_arrTipcounterNames, l_arr_TemplateIDs, l_arr_PositionIDs);
      l_intSizeOfTemplateIDs=l_arr_TemplateIDs.GetSize();
      if (l_intSizeOfTemplateIDs != 0)
      {
        {
          for(l_intTemplateIDIndex = 0; l_intTemplateIDIndex < l_intSizeOfTemplateIDs;)
          {
            l_intTemplateIDIndex = l_intTemplateIDIndex + 1;
            l_strCarrierIDToLoad=l_arr_TemplateIDs.GetAt(l_intTemplateIDIndex-1);
            l_strPositionIDsToScan=l_arr_PositionIDs.GetAt(l_intTemplateIDIndex-1);
            HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strResultIsLoadable, Translate("MlStarCarIsLoadable"), l_strCarrierIDToLoad);
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strResultIsLoadable "), l_strResultIsLoadable);
            if (l_strResultIsLoadable == "1")
            {
              HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strCarrierLabelName, Translate("MlStarCarLabelName"), l_strCarrierIDToLoad);
              if (l_strCarrierLabelName == "")
              {
                l_strLoadCarrierMessage = StrConcat4(Translate("Load carrier: "), l_strCarrierIDToLoad, Translate(""), Translate(""));
              }
              else
              {
                l_strLoadCarrierMessage = StrConcat4(Translate("Load carrier: "), l_strCarrierLabelName, Translate(""), Translate(""));
              }
              VectorCustomDialogs::AppendStatusText(l_strLoadCarrierMessage);
              onerror goto errLabel_8 ;
              err.Clear();
              if (i_blnBarcodeReadingActivated == ASWGLOBAL::BOOL::TRUE)
              {
                HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strBarcodeWidth, Translate("MlStarBarcodeWidth"), l_strCarrierIDToLoad);
                HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strBarcodeHeight, Translate("MlStarBarcodeHeight"), l_strCarrierIDToLoad);
                HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strBarcodeDistToDeck, Translate("MlStarBarcodeDistToDeck"), l_strCarrierIDToLoad);
                HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strBarcodeYTrigger, Translate("MlStarBarcodeYTrigger"), l_strCarrierIDToLoad);
                TRACELEVEL::Trace_08(TRACE_LEVEL_DEBUG, Translate("l_strBarcodeHeight: "), l_strBarcodeHeight, Translate("; l_strBarcodeWidth: "), l_strBarcodeWidth, Translate("; l_strBarcodeDistToDeck: "), l_strBarcodeDistToDeck, Translate("; l_strBarcodeYTrigger: "), l_strBarcodeYTrigger);
                if (l_strBarcodeWidth == ""|| l_strBarcodeHeight == ""|| l_strBarcodeDistToDeck == ""|| l_strBarcodeYTrigger == "")
                {
                  l_blnNoCustomWindowOfInterest = ASWGLOBAL::BOOL::TRUE;
                  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("The size of the barcode custom window of interest could not be retrieved from the labware properties of the deck layout."), Translate(" Barcode reading will be performed with the default barcode window."));
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                    	l_strStepReturnValueCarrier = arrRetValues[2];
                    	l_strStepReturnValuePositions = arrRetValues[3];
                  }
                }
                else
                {
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                    	l_strStepReturnValueCarrier = arrRetValues[2];
                    	l_strStepReturnValuePositions = arrRetValues[3];
                  }
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  	l_strStepReturnValueCarrier = arrRetValues[2];
                  	l_strStepReturnValuePositions = arrRetValues[3];
                }
              }
              _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToReport(ML_STAR, l_strStepReturnValueCarrier, l_strStepReturnValuePositions);
              errLabel_8 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                l_strErrorMessageLoadingCarrier = StrConcat12(Translate("There was an issue while loading the carrier with the following ID: "), Translate("\n\n"), l_strCarrierIDToLoad, Translate("\n\n"), Translate("Possible error: no carrier or wrong carrier."), Translate("\n\n"), Translate("Please load the requested carrier manually."), Translate("\n\n"), Translate("Press OK once the carrier has been loaded."), Translate("\n"), Translate("If you are uncertain of the accuracy of the carrier\nplease press CANCEL to abort the run and revise the method."), Translate(""));
                l_intReturnValue = VectorCustomDialogs::ErrorDialog(Translate("Carrier Loading Error"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, l_strErrorMessageLoadingCarrier, Translate(""));
                if (l_intReturnValue == ASWGLOBAL::DIALOG::CANCEL)
                {
                  _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Difficulties with loading of carrier. User intervention requested to load carrier manually. Abort requested by user."));
                }
                l_strErrorMessageLoadingCarrierReportFile = StrConcat12(Translate("There was a problem loading the carrier: "), Translate(""), l_strCarrierIDToLoad, Translate(""), Translate(""), Translate(""), Translate(". Request for manual carrier loading."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                _DATA_UpdateInformationIntoReportFile(l_strErrorMessageLoadingCarrierReportFile);
              }   /* end if from skip handler if no error */
            }
            else
            {
              l_strCarrierUnloadable = StrConcat4(Translate("The carrier with the Carrier ID: "), l_strCarrierIDToLoad, Translate(" is not a loadable carrier. Loading cannot be performed."), Translate(""));
              TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(""), l_strCarrierUnloadable);
              _DATA_UpdateInformationIntoReportFile(l_strCarrierUnloadable);
            }
          }
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  private function _GetDistinctSortedCarriersAndPositionIDsFromTipCounters( device & Instrument, variable & i_arrTipcounterNames[], variable & o_arr_TemplateIDs[], variable & o_arr_PositionIDs[] ) void {
    private variable l_site_ID;
    private variable l_carrier_ID;
    private variable l_strFunctionName;
    private variable l_arr_LabwareIDs[];
    private variable l_arr_TemplateIDs[];
    private variable l_intIndexTipCounterName;
    private variable l_intReturnValue;
    private variable l_GetNextCurrentTips;
    private variable l_intSizeArrayTipCounterNames;
    private sequence l_seqAllTips;
    private sequence l_seqCurrentTips;
    private variable l_arrCurrentLabwareIDs[];
    private variable l_fltPositionX;
    private variable l_fltPositionY;
    private variable l_fltPositionZ;
    private variable l_fltPositionR;
    private variable l_intNumberOfLabwareIDs;
    private variable l_strTemplateID;
    private variable l_intTemplateFound;
    private variable l_intIndexLabwareIDs;
    private variable l_strTemplateSiteID;
    private variable l_arr_PositionIDs[];
    private variable l_arr_XCoordinates[];
    private variable l_arr_TemplateSiteIDs[];
    private variable l_strTemplateSiteIDConcatenated;
    private variable l_intTemplateSiteIDFound;
    private variable l_intIndexTemplateSiteIDs;
    private variable l_blnSuccessfulSorted;
    private variable l_str_TemplateSiteIDsSorted;
    private variable l_intSizeTemplateSiteIDs;
    private variable l_arr_TemplateSiteIDsSplit[];
    o_arr_TemplateIDs.SetSize( 0);
    o_arr_PositionIDs.SetSize( 0);
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    l_site_ID = Translate("");
    l_carrier_ID = Translate("");
    l_fltPositionX = 0.0;
    l_fltPositionY = 0.0;
    l_fltPositionZ = 0.0;
    l_fltPositionR = 0.0;
    l_strTemplateSiteID = Translate("");
    l_arr_LabwareIDs.SetSize(0);
    l_arr_TemplateIDs.SetSize(0);
    l_arr_PositionIDs.SetSize(0);
    l_arr_XCoordinates.SetSize(0);
    l_arr_TemplateSiteIDs.SetSize(0);
    l_arrCurrentLabwareIDs.SetSize(0);
    SeqRemoveAll(l_seqAllTips);
    l_intSizeArrayTipCounterNames=i_arrTipcounterNames.GetSize();
    {
      for(l_intIndexTipCounterName = 0; l_intIndexTipCounterName < l_intSizeArrayTipCounterNames;)
      {
        l_intIndexTipCounterName = l_intIndexTipCounterName + 1;
        l_intReturnValue = TIPMANAGEMENTLIBRARY::Counter_GetSequenceFromName(i_arrTipcounterNames.ElementAt( l_intIndexTipCounterName -1), l_seqCurrentTips);
        l_GetNextCurrentTips = SeqGetNext(l_seqCurrentTips);
        if (l_GetNextCurrentTips == 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("No tips have been selected for the following tip counter - no carriers will be loaded: "), i_arrTipcounterNames.ElementAt( l_intIndexTipCounterName -1));
        }
        else
        {
          l_seqAllTips = HSLExtensions::Sequence::Concat(l_seqAllTips, l_seqCurrentTips, 0);
        }
      }
    }
    SeqGetLabwareIds(l_seqAllTips, l_arrCurrentLabwareIDs);
    l_intNumberOfLabwareIDs=l_arrCurrentLabwareIDs.GetSize();
    if (l_intNumberOfLabwareIDs != 0)
    {
      {
        for(l_intIndexLabwareIDs = 0; l_intIndexLabwareIDs < l_intNumberOfLabwareIDs;)
        {
          l_intIndexLabwareIDs = l_intIndexLabwareIDs + 1;
          HSLLabwrAccess::GetTemplateIDAndTemplateSiteID(Instrument, l_arrCurrentLabwareIDs.ElementAt( l_intIndexLabwareIDs -1), l_strTemplateID, l_strTemplateSiteID);
          l_intTemplateFound = ARRAYTOOLS::Lookup(l_arr_TemplateIDs, l_strTemplateID);
          if (l_intTemplateFound == 0)
          {
            l_arr_TemplateIDs.AddAsLast(l_strTemplateID);
            l_arr_TemplateSiteIDs.AddAsLast(l_strTemplateSiteID);
            HSLLabwrAccess::AbsolutePositionValuesGetForLabwareID(Instrument, l_strTemplateID, l_fltPositionX, l_fltPositionY, l_fltPositionZ, l_fltPositionR);
            l_arr_XCoordinates.AddAsLast(l_fltPositionX);
          }
          else
          {
            l_intTemplateSiteIDFound = StrFind(l_arr_TemplateSiteIDs.ElementAt( l_intTemplateFound -1), l_strTemplateSiteID);
            if (l_intTemplateSiteIDFound == -1)
            {
              l_strTemplateSiteIDConcatenated = StrConcat4(l_arr_TemplateSiteIDs.ElementAt( l_intTemplateFound -1), Translate(","), l_strTemplateSiteID, Translate(""));
              l_arr_TemplateSiteIDs.SetAt(l_intTemplateFound-1, l_strTemplateSiteIDConcatenated);
            }
          }
        }
      }
      ARRAYTOOLS::Sort3ArraysByNumericAscendingOrder(l_arr_XCoordinates, l_arr_TemplateIDs, l_arr_TemplateSiteIDs);
      l_intSizeTemplateSiteIDs=l_arr_TemplateSiteIDs.GetSize();
      {
        for(l_intIndexTemplateSiteIDs = 0; l_intIndexTemplateSiteIDs < l_intSizeTemplateSiteIDs;)
        {
          l_intIndexTemplateSiteIDs = l_intIndexTemplateSiteIDs + 1;
          l_arr_TemplateSiteIDsSplit = HSLExtensions::String::Split(l_arr_TemplateSiteIDs.ElementAt( l_intIndexTemplateSiteIDs -1), Translate(","), ASWGLOBAL::BOOL::TRUE);
          HSLExtensions::Array::Sort(l_arr_TemplateSiteIDsSplit, 1, l_blnSuccessfulSorted);
          l_str_TemplateSiteIDsSorted = HSLExtensions::String::JoinWithDelimiter(l_arr_TemplateSiteIDsSplit, Translate(","));
          l_arr_TemplateSiteIDs.SetAt(l_intIndexTemplateSiteIDs-1, l_str_TemplateSiteIDsSorted);
        }
      }
    }
    o_arr_TemplateIDs=l_arr_TemplateIDs;
    o_arr_PositionIDs=l_arr_TemplateSiteIDs;
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_TemplateIDs: "), l_arr_TemplateIDs);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_TemplateSiteIDs: "), l_arr_TemplateSiteIDs);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }
} // library namespace
