#pragma once
#include "HSLStrLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLSeqLib.hsl"
#include "LoadingDocumentHelper\\LoadingDocumentHelper.hsl"
#include "ArrayTools\\ArrayTools.hs_"
#include "StringTokenizer\\StrTokenize.hs_"
#include "HSLMthLib.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLDevLib.hsl"
#include "HSLExtensions\\Array.hsl"
#include "Labware Properties\\Labware_Property_Query.hs_"
#include "HSLDeckVisualize.hsl"
#include "HSLTimLib.hsl"
#include "HSLExtensions\\Directory.hsl"
#include "InstrumentTypeHelper.hsl"
#include "HSLTrcLib.hsl"
#include "HSLFilLib.hsl"
#include "HSLExtensions\\Venus.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "SequenceTools_V3\\SequenceTools_V3.hs_"
#include "HSLExtensions\\Sequence.hsl"
#include "HSLLabwareStateLib.hsl"
#include "VirtualLabware_V2\\VirtualLabware_V2.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace LOADINGDIALOG_CONTROLLER {
  sequence t_arr_seq_RGT_SequencesToAspirate[];
  variable t_str_PlatformUsed;
  variable t_intGetTraceLevel;
  variable t_str_KitName;
  variable t_str_HamiltonMainFileDirectory;
  variable t_str_FullpathFile_RunData;
  variable t_str_LoadingPicturesFileDirectory;
  variable t_str_KitProvider;
  variable t_arr_flt_RGT_TotalVolume[];
  variable t_arr_str_RGT_ReagentName[];
  variable t_str_KitProvider_KitName;
  variable file_MultipleChoice_DialogID;
  variable file_MultipleChoice_ToolTip;
  variable file_MultipleChoice_GroupName;
  variable file_MultipleChoice_Editable;
  variable file_MultipleChoice_Label;
  variable file_MultipleChoice_Selected;
  file file_RunData;
  file file_MultipleChoice;
  variable t_intNumberOfChannelsInstalled;
  variable t_arr_strTemplateIds[];
  variable t_arr_strLabwareIds[];
  variable t_arr_strPositionIds[];
  variable t_arr_strSiteIds[];
  variable t_arr_fltVolumes[];
  variable t_arr_strReagentName[];
  variable t_arr_strLabwareType[];
  variable t_arr_strQtyLabwareTypeVolume[];
  variable t_arr_strTemplateIds_distinct[];
  variable t_arr_strAdditionalDataCarrierName[];
  variable t_arr_strAdditionalDataColumn3[];
  variable t_arr_strAdditionalDataColumn1[];
  variable t_arr_intAdditionalDataColumn2[];
  variable t_blnLiquidIsMastermixComponent;
  variable t_blnLiquidIsMastermix;
  variable t_blnLiquidIsReagent;
  variable t_str_InputWorklistFilePath;
  variable t_arr_strMastermixNames[];
  variable t_arr_strMastermixComponentNames[];
  variable t_arr_str_Labware_FilePath[];
  variable t_arr_str_Labware_Description[];
  variable t_arr_str_Labware_ViewName[];
  variable t_arr_strLabwareViewName[];
  variable t_strType_MastermixComponent;
  variable t_strType_Reagent;
  variable t_strType_Mastermix;
  variable t_str_DateNow;
  variable t_str_TimeNow;
  variable t_arr_strRunDataFilePaths[];
  variable t_arr_strTemplateIds_ForLiquidsOnly[];
  variable t_strDeckLayout;
  variable t_strStar;
  variable t_arr_strLabwareDescription[];
  variable t_int_SystemConnected;
  variable t_str_RunData_DirectoryName;
  variable t_strFunctionName;
  variable t_str_ReturnNameAndVersion;
  variable t_str_Comment;
  variable t_strControllerVersion;
  variable t_strLibraryName;
  variable t_arr_strContainerDescription[];
  variable t_arr_strContainerViewName[];
  variable t_arr_str_TempAdditionalDataForCarrier_Column1[];
  variable t_arr_str_TempAdditionalDataForCarrier_Column2[];
  variable t_arr_str_TempAdditionalDataForCarrier_Column3[];
  variable file_RunData_DB_SequenceName("");
  variable file_RunData_DB_Name("");
  variable file_RunData_DB_DeadVolumeLabware(0.0);
  variable file_RunData_DB_TrackNumber(0);
  variable file_RunData_DB_ContainerDescription("");
  variable file_RunData_DB_Units(0);
  variable file_RunData_DB_MasterMixComponentName("");
  variable file_RunData_DB_LabwareDescription("");
  variable file_RunData_DB_DeadVolumePercent(0.0);
  variable file_RunData_DB_Description("");
  variable file_RunData_DB_MastermixPreparedOnDeck(0);
  variable file_RunData_DB_CarrierName("");
  variable file_RunData_DB_LabwareFileName("");
  variable file_RunData_DB_TotalDeadVolume(0.0);
  variable file_RunData_DB_LabwareName("");
  variable file_RunData_DB_SiteID("");
  variable file_RunData_DB_MastermixName("");
  variable file_RunData_DB_TotalVolume(0.0);
  variable file_RunData_DB_VolumePerWell(0.0);
  variable file_RunData_DB_Type("");
  variable file_RunData_DB_Ratio(0);
  variable file_RunData_DB_PositionID("");
  variable file_RunData_DB_NumberOfSamples(0);
  variable file_RunData_DB_ExtraVolume(0.0);
  variable file_RunData_DB_ContainerViewName("");
  variable t_str_ProtocolVersion;
  variable file_RunData_DB_AddToDialog(0);
  private function AddDataToDialog_LoadCarrier( variable i_str_Carrier_Name, variable i_str_DataForColumn1_Positions, variable i_str_DataForColumn2_Text, variable i_str_DataForColumn3_Description, device & ML_STAR ) void ;
  function Add_LabwareForCurrentProcess( device & ML_STAR, variable i_str_LabwareName, variable i_str_LabwareDescription, variable i_int_NumberOfUnits, sequence & i_seqTemplate, variable i_var_PositionInSequence ) variable ;
  function CalculateTotalVolumeAndSequenceToAspirate( variable i_strLiquidName, variable i_intNumberOfSamples, variable i_fltDeadVolumeLabware, variable i_fltDeadVolumeLiquid, variable i_fltMaximumVolumePerContainer, variable i_intMinimumNumberOfContainers, sequence & i_seqTemplate, variable i_intStartingPositionInSeqTemplate, sequence & o_seqToAspirate, variable & o_arr_fltVolumePerContainer[], device & ML_STAR, variable i_bln_ShowDataInLoadingDialog ) variable ;
  function Deck_Visualize( device & ML_STAR, variable i_Labware_ID, variable i_State ) variable ;
  function Deck_Visualize_fromArray( device & ML_STAR, variable & i_arrLabware_ID[], variable i_State ) variable ;
  function Define_VolumePerWell( variable i_str_LiquidName, variable & i_flt_VolumePerSample ) variable ;
  function Define_VolumePerWell_MastermixComponent( variable i_str_MastermixLiquidName, variable i_str_ComponentLiquidName, variable i_flt_VolumePerSample ) variable ;
  function DisplayDialog_DataInput( variable i_strTopText, variable i_strMainText, variable i_strDescription, variable i_strCustomToolTip, variable i_intDataType, variable i_strRange, variable & o_varOutput, variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable ;
  function DisplayDialog_Error( variable i_str_Message, variable i_str_ImagePath, variable i_int_Timeout, variable i_str_SoundFilePath, variable i_int_SoundLoop ) void ;
  function DisplayDialog_Information( variable i_str_Message, variable i_str_ImagePath, variable i_int_Timeout, variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable ;
  function DisplayDialog_LoadCarrier( variable i_strCarrierName, variable i_strFilePath_MainImage, variable i_strFilePath_SubImage, variable i_int_Timeout, device & ML_STAR, variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable ;
  function DisplayDialog_LoadList_SingleStep( variable i_strTopMessage, variable i_strFilePath_MainImage, variable i_strFilePath_SubImage, variable i_int_Timeout, variable i_str_SoundFilePath, variable i_int_SoundLoop, variable i_str_HeaderColumn1, variable & i_arr_str_Column1[], variable i_str_HeaderColumn2, variable & i_arr_str_Column2[], variable i_str_HeaderColumn3, variable & i_arr_str_Column3[] ) variable ;
  function DisplayDialog_MastermixRecipe( variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable ;
  function DisplayDialog_Question( variable i_str_Message, variable i_str_ImagePath, variable & o_int_OptionSelected, variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable ;
  function DisplayDialog_SelectEmailAddress( variable & o_str_EmailAddress, variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable ;
  function DisplayDialog_SelectInputWorklist( variable & o_str_FileWorklistFullPath, variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable ;
  function DisplayDialog_Tips( variable i_strFilePath_MainImage, variable i_strTextMessage, variable i_int_Timeout, device & ML_STAR, variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable ;
  function DisplayDialog_Warning( variable i_str_Message, variable i_str_ImagePath, variable i_int_Timeout, variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable ;
  function Display_ResourcesPDF(  ) void ;
  function Evaluate_ResourcesByCarrier( device & ML_STAR, variable & o_arr_strTemplateIds_ToLoad[], variable & o_arr_strTemplateIds_AllCarriers[] ) variable ;
  function Get_NumberOfUnits_ByLabwareName( variable i_str_LabwareName, variable i_str_CarrierName, variable & o_int_NumberOfUnits ) variable ;
  function Init( device & ML_STAR, variable i_strKit_FolderPath, variable i_strProtocolVersion, variable & o_str_ControllerNameAndVersion, variable & o_str_RunDataReportFilePath ) variable ;
  function MultipleChoiceDialog_DefineChoiceElement( variable i_int_DialogId, variable i_str_GroupName, variable i_str_Label, variable i_bln_PreSelected ) variable ;
  function MultipleChoiceDialog_DisplayDialog( variable i_int_DialogID ) variable ;
  function MultipleChoiceDialog_RetrieveUserSelection( variable i_int_DialogID, variable i_str_GroupName, variable & o_int_OptionSelected ) variable ;
  function SelectProcesses_DisplayDialog( variable & i_arr_strProcessId[], variable & i_arr_strProcessCombinations[], variable & i_arr_intProcessDeactivatedStartPoints[], variable & i_arr_intProcessDeactivatedStopPoints[], variable & o_int_StartProcess, variable & o_int_StopProcess, variable & o_arr_blnProcessActivationStatus[] ) variable ;
  function Terminate(  ) variable ;
  private function _Add_ContainerToRack( device & i_MLSTAR, variable i_strLabwareID, variable i_intPositionID, variable i_intNumberOfTubes, variable i_strConfigFile, variable i_intXOffset, variable i_intYOffset, variable i_intZOffset ) void ;
  private function _Calculate_NumberOfContainersAndVolumePerContainer_BySampleNumber( variable i_strReagentName, variable i_intNumberOfSamples, variable i_fltTransferVolume, variable i_fltDeadVolumeLabware, variable i_fltDeadVolumeLiquid, variable i_fltMaximumVolumePerContainer, variable i_intNumberOfContainersRequired, variable & o_intNumberOfContainers, variable & o_arr_fltVolumePerContainer[], variable & o_fltTotalVolumeNeeded ) void ;
  private function _Calculate_NumberOfContainersAndVolumePerContainer_ByTotalVolume( variable i_strReagentName, variable i_fltTotalVolume, variable i_fltDeadVolumeLabware, variable i_fltDeadVolumeLiquid, variable i_fltMaximumVolumePerContainer, variable i_intNumberOfContainersRequired, variable & o_intNumberOfContainers, variable & o_arr_fltVolumePerContainer[], variable & o_fltTotalVolumeNeeded ) void ;
  private function _Calculate_SequenceToAspirate( variable i_strReagentName, variable i_intNumberOfContainers, variable i_strLabwareType, variable i_strLabwareViewName, variable i_strLabwareDescription, sequence & i_seqTemplate, variable i_intStartingPoint, sequence & o_seqAspirate, device & ML_STAR ) void ;
  private function _Calculate_TotalVolumeRequiredForThisLiquidFromFile( variable i_strLiquidName, variable i_strLiquidType, variable & o_fltTotalVolumeRequired, variable & o_arr_fltTotalVolumeRequired[] ) void ;
  private function _Calculate_TotalVolume_MastermixComponent( variable i_str_MastermixName, variable i_str_MastermixComponentName, variable i_flt_MastermixVolume, variable i_flt_MastermixTotalVolume, variable i_flt_MastermixComponentVolume, variable & o_flt_MastermixComponentTotalVolume, variable & o_flt_Ratio ) void ;
  private function _CheckPoint_Variable_Type( variable i_strFunctionName, variable i_varName, variable i_strVariableName, variable i_strVariableTypeRequired, variable i_bln_AllowEmptyString ) void ;
  private function _CheckSytemConnected( device & ML_STAR, variable & o_intPlatformType ) void ;
  private function _ContainerDefinition( variable i_strLabwareType, variable & o_strContainerDefinition, variable & o_fltOffsetZ ) void ;
  private function _ConvertValueToString( variable i_value, variable & o_str_ConvertedValue ) void ;
  private function _Definitions( device & ML_STAR ) void ;
  private function _DescriptionForDialog( variable i_intNumberOfContainers, variable i_strLabwareType, variable & i_arr_fltVolumePerContainer[], variable & o_strDescription ) void ;
  private function _FileOpenRunData( variable i_str_SQL, variable i_FileOpenMode ) void ;
  private function _FindLiquidIndDB( variable i_strLiquidName, variable & o_strLiquidType ) void ;
  private function _GenerateString_VolumeUnits( variable i_flt_Volume, variable & o_str_Description ) void ;
  private function _GetAllDeckSequences( device & i_instrument, sequence & o_arr_sequences[], variable & o_arr_sequenceNames[] ) void ;
  private function _GetCarrierAndSiteID( device & Instrument, variable i_str_LabwareID, variable & o_str_TemplateID, variable & o_str_TemplateSiteID, variable & o_int_TrackNumber ) void ;
  private function _GroupDataInDialog( variable & io_arrColumn1[], variable & io_arrColumn2[], variable & io_arrColumn3[], variable i_bln_add_additionalText ) void ;
  private function _GroupDataInDialog_bckp( variable & io_arrColumn1[], variable & io_arrColumn2[], variable & io_arrColumn3[], variable i_bln_add_additionalText ) void ;
  private function _Reformat_VolumesForDialog( variable i_flt_valueToReformat, variable i_str_units, variable & o_str_valueFormatted ) void ;
  private function _Reset_FileRunData_Variables(  ) void ;
  private function _RunDATA_AddRecord( variable i_str_ColumnName, variable i_value, variable i_int_FileHandler ) variable ;
  private function _RunDATA_Find_Record( variable i_str_ColumnName, variable i_value, variable i_CarrierName, variable i_int_FileHandler, variable & o_intNumberOfElementsFound ) variable ;
  private function _RunDATA_UpdateRecord( variable i_str_SheetName, variable i_str_ColumnName, variable i_keyNewValue, variable i_str_ColumnReference, variable i_keyValueReference ) void ;
  private function _Sort2ArraysByNumericAscendingOrder( variable & io_array1[], variable & io_array2[] ) void ;
  private function _SortElements( variable & io_arrColumn1[], variable & io_arrColumn2[], variable & io_arrColumn3[], variable i_intSortByColumn ) void ;
  private function _TraceArraysInParallel( variable & i_arr1[], variable & i_arr2[], variable & i_arr3[], variable & i_arr4[], variable & i_arr5[], variable & i_arr6[], variable & i_arr7[] ) void ;
  private function _Trace_FileRunDataVariables(  ) void ;
  private function _UpdateLabwareDataInFile( variable & i_arr_Values[], variable i_str_ColumnName, variable i_keyValueReference, variable i_str_ColumnReference ) void ;
  private function _Version_History(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ARRAYTOOLS::_InitLibrary();
    STRTOKENIZE::_InitLibrary();
    LPQ::_InitLibrary();
    SEQUENCETOOLS_V3::_InitLibrary();
  }
  function _ExitLibrary() {
    ARRAYTOOLS::_ExitLibrary();
    STRTOKENIZE::_ExitLibrary();
    LPQ::_ExitLibrary();
    SEQUENCETOOLS_V3::_ExitLibrary();
  }

  function Init( device & ML_STAR, variable i_strKit_FolderPath, variable i_strProtocolVersion, variable & o_str_ControllerNameAndVersion, variable & o_str_RunDataReportFilePath ) variable {
    private variable l_bln_FileExists;
    private variable l_str_FunctionName;
    private variable l_bln_DeleteFile;
    private variable loopCounter1;
    private variable l_strMessage;
    private variable l_bln_DirectoryExists;
    private variable l_str_LogfilesFolderPath;
    private variable l_arrTokens_KitDirectory[];
    o_str_ControllerNameAndVersion = 0;
    o_str_RunDataReportFilePath = 0;
    t_intGetTraceLevel = TRACELEVEL::GetTraceLevel();
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_strControllerVersion = Translate("2.1.15");
    t_str_ReturnNameAndVersion = Translate("");
    t_str_ProtocolVersion = i_strProtocolVersion;
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    t_str_ReturnNameAndVersion = StrConcat4(t_strLibraryName, " ", t_strControllerVersion, "");
    Trace("LibraryName: ",t_strLibraryName," Controller Version: ", t_strControllerVersion);
    t_strLibraryName = HSLExtensions::File::GetFileNameWithoutExtension(t_strLibraryName);
    o_str_ControllerNameAndVersion = StrConcat4(t_strLibraryName, " ", t_strControllerVersion, "");
    Trace("LibraryName: ",t_strLibraryName," Controller Version: ", t_strControllerVersion);
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    t_strDeckLayout = DevGetDeckLayoutFileName(ML_STAR);
    t_strStar = DevGetInstrumentName(ML_STAR);
    _CheckSytemConnected(ML_STAR, t_int_SystemConnected);
    _Definitions(ML_STAR);
    STRTOKENIZE::StrTokenize(i_strKit_FolderPath, Translate("\\"), l_arrTokens_KitDirectory, ASWGLOBAL::BOOL::FALSE);
    Util2::Debug::TraceArray(Translate("l_arrTokens_KitDirectory: "), l_arrTokens_KitDirectory);
    t_str_PlatformUsed = l_arrTokens_KitDirectory.ElementAt( 4 -1);
    t_str_KitProvider = l_arrTokens_KitDirectory.ElementAt( 5 -1);
    t_str_KitName = l_arrTokens_KitDirectory.ElementAt( 6 -1);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("t_str_KitProvider: "), t_str_KitProvider);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("t_str_KitName: "), t_str_KitName);
    t_str_KitProvider_KitName = StrConcat4(t_str_KitProvider, Translate(" - "), t_str_KitName, Translate(""));
    _CheckPoint_Variable_Type(l_str_FunctionName, i_strKit_FolderPath, Translate("i_strKit_FolderPath"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    t_arr_str_Labware_FilePath.SetSize(0);
    t_arr_str_Labware_Description.SetSize(0);
    t_arr_str_Labware_ViewName.SetSize(0);
    l_str_LogfilesFolderPath = FilGetLogFilesPath();
    t_str_LoadingPicturesFileDirectory = StrConcat12(t_str_HamiltonMainFileDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitProvider, Translate("\\"), t_str_KitName, Translate("\\Files\\"), Translate(""), Translate("LoadingPictures\\"), Translate(""), Translate(""), Translate(""));
    if(0){
      t_str_FullpathFile_RunData = StrConcat12(l_str_LogfilesFolderPath, Translate("\\"), t_str_KitName, Translate("_RunData"), Translate("_"), t_str_DateNow, Translate("_"), t_str_TimeNow, Translate(""), Translate(""), Translate(""), Translate(".xlsx"));
    }
    t_str_FullpathFile_RunData = StrConcat12(l_str_LogfilesFolderPath, Translate("\\"), t_str_KitName, Translate("_RunData"), Translate("_"), t_str_DateNow, Translate("_"), t_str_TimeNow, Translate(""), Translate(""), Translate(""), Translate(".xls"));
    if(0){
      t_str_RunData_DirectoryName = StrConcat12(t_str_HamiltonMainFileDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitProvider, Translate("\\"), t_str_KitName, Translate("\\Files\\RunData"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      l_bln_DirectoryExists = HSLExtensions::Directory::Exists(t_str_RunData_DirectoryName);
      if (l_bln_DirectoryExists == ASWGLOBAL::BOOL::FALSE)
      {
        HSLExtensions::Directory::Create(t_str_RunData_DirectoryName);
      }
    }
    t_arr_strRunDataFilePaths.AddAsLast(t_str_FullpathFile_RunData);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("t_str_FullpathFile_RunData: "), t_str_FullpathFile_RunData);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("t_str_LoadingPicturesFileDirectory: "), t_str_LoadingPicturesFileDirectory);
    l_bln_FileExists = HSLExtensions::File::Exists(t_str_FullpathFile_RunData);
    l_bln_DeleteFile = ASWGLOBAL::BOOL::FALSE;
    if (l_bln_FileExists == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          l_bln_DeleteFile = HSLExtensions::File::Delete(t_str_FullpathFile_RunData);
          if (l_bln_DeleteFile == ASWGLOBAL::BOOL::FALSE)
          {
            l_strMessage = StrConcat4(Translate("If RunData is in use please, save it as a copy and close the original file: "), Translate("\n"), t_str_FullpathFile_RunData, Translate(""));
            DisplayDialog_Information(l_strMessage, Translate(""), 0, Translate(""), 0);
          }
          else
          {
            break;
          }
        }
      }
    }
    _FileOpenRunData(Translate(""), 3);
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    file_MultipleChoice.AddField("DialogID", file_MultipleChoice_DialogID, hslInteger);
    file_MultipleChoice.AddField("GroupName", file_MultipleChoice_GroupName, hslString, 255);
    file_MultipleChoice.AddField("Label", file_MultipleChoice_Label, hslString, 255);
    file_MultipleChoice.AddField("Selected", file_MultipleChoice_Selected, hslInteger);
    file_MultipleChoice.AddField("Editable", file_MultipleChoice_Editable, hslInteger);
    file_MultipleChoice.AddField("ToolTip", file_MultipleChoice_ToolTip, hslString, 255);
    if( 0 == file_MultipleChoice.Open(t_str_FullpathFile_RunData + " " + "MultipleChoiceDialog_Definition", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
    }
    if( 0 != file_MultipleChoice.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_MultipleChoice.RemoveFields();
    o_str_RunDataReportFilePath = t_str_FullpathFile_RunData;
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _Definitions( device & ML_STAR ) void {
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    t_arr_flt_RGT_TotalVolume.SetSize(0);
    t_arr_str_RGT_ReagentName.SetSize(0);
    t_arr_seq_RGT_SequencesToAspirate.SetSize(0);
    t_str_HamiltonMainFileDirectory = Translate("C:\\Program Files (x86)\\HAMILTON\\");
    MECC::TraceComment(Translate("Get total number of channels bound to the system"));
    t_intNumberOfChannelsInstalled = DevGetCfgValueWithKey(ML_STAR, 1);
    t_strType_MastermixComponent = Translate("MastermixComponent");
    t_strType_Mastermix = Translate("Mastermix");
    t_strType_Reagent = Translate("Reagent");
    t_str_DateNow = TimGetFormattedDate(Translate("%Y%m%d"));
    t_str_TimeNow = TimGetFormattedTime(Translate("%H%M%S"));
    t_arr_strRunDataFilePaths.SetSize(0);
    t_arr_strPositionIds.SetSize(0);
    t_arr_strLabwareIds.SetSize(0);
    t_arr_strTemplateIds.SetSize(0);
    t_arr_strTemplateIds_ForLiquidsOnly.SetSize(0);
    t_arr_strSiteIds.SetSize(0);
    t_arr_fltVolumes.SetSize(0);
    t_arr_strReagentName.SetSize(0);
    t_arr_strLabwareType.SetSize(0);
    t_arr_strLabwareViewName.SetSize(0);
    t_arr_strLabwareDescription.SetSize(0);
    t_arr_strContainerViewName.SetSize(0);
    t_arr_strContainerDescription.SetSize(0);
    t_arr_strQtyLabwareTypeVolume.SetSize(0);
    t_arr_strAdditionalDataColumn1.SetSize(0);
    t_arr_intAdditionalDataColumn2.SetSize(0);
    t_arr_strAdditionalDataColumn3.SetSize(0);
    t_arr_strAdditionalDataCarrierName.SetSize(0);
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return;
  }

  function DisplayDialog_Error( variable i_str_Message, variable i_str_ImagePath, variable i_int_Timeout, variable i_str_SoundFilePath, variable i_int_SoundLoop ) void {
    private variable l_int_rtnDialog;
    private variable l_str_FunctionName;
    private variable l_str_MethodName;
    private variable l_str_Comment;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    i_str_Message = StrConcat4(i_str_Message, Translate("\n\n"), Translate("Press OK to Abort."), Translate(""));
    if (i_str_SoundFilePath != "")
    {
      VectorCustomDialogs::ActivateSoundForNextDialog(i_str_SoundFilePath, i_int_SoundLoop);
    }
    l_int_rtnDialog = VectorCustomDialogs::MessageDialogWithImage(t_str_KitProvider_KitName, VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, i_int_Timeout, i_str_Message, i_str_ImagePath, 0);
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, l_str_FunctionName, l_str_MethodName, l_str_Comment);
    abort;
  }

  function DisplayDialog_Information( variable i_str_Message, variable i_str_ImagePath, variable i_int_Timeout, variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable {
    private variable l_int_rtnDialog;
    private variable l_str_FunctionName;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_str_Message, Translate("i_str_Message"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    i_str_Message = StrConcat4(i_str_Message, Translate("\n\n"), Translate("Press OK to Continue.\nPress Cancel to Abort"), Translate(""));
    if (i_str_SoundFilePath != "")
    {
      VectorCustomDialogs::ActivateSoundForNextDialog(i_str_SoundFilePath, i_int_SoundLoop);
    }
    l_int_rtnDialog = VectorCustomDialogs::MessageDialogWithImage(t_str_KitProvider_KitName, VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, i_int_Timeout, i_str_Message, i_str_ImagePath, 0);
    if (l_int_rtnDialog == 2)
    {
      abort;
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function DisplayDialog_Warning( variable i_str_Message, variable i_str_ImagePath, variable i_int_Timeout, variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable {
    private variable l_int_rtnDialog;
    private variable l_str_FunctionName;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_str_Message, Translate("i_str_Message"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    i_str_Message = StrConcat4(i_str_Message, Translate("\n\n"), Translate("Press OK to Continue.\nPress Cancel to Abort"), Translate(""));
    if (i_str_SoundFilePath != "")
    {
      VectorCustomDialogs::ActivateSoundForNextDialog(i_str_SoundFilePath, i_int_SoundLoop);
    }
    l_int_rtnDialog = VectorCustomDialogs::MessageDialogWithImage(t_str_KitProvider_KitName, VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, i_int_Timeout, i_str_Message, i_str_ImagePath, 0);
    if (l_int_rtnDialog == 2)
    {
      abort;
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function DisplayDialog_Question( variable i_str_Message, variable i_str_ImagePath, variable & o_int_OptionSelected, variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable {
    private variable l_int_rtnDialog;
    private variable l_str_FunctionName;
    o_int_OptionSelected = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_str_Message, Translate("i_str_Message"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    i_str_Message = StrConcat4(i_str_Message, Translate("\n\n"), Translate("Press Yes or No."), Translate(""));
    if (i_str_SoundFilePath != "")
    {
      VectorCustomDialogs::ActivateSoundForNextDialog(i_str_SoundFilePath, i_int_SoundLoop);
    }
    l_int_rtnDialog = VectorCustomDialogs::MessageDialogWithImage(t_str_KitProvider_KitName, VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::YesNoCancel, 0, 0, 0, i_str_Message, i_str_ImagePath, 0);
    if (l_int_rtnDialog == 2)
    {
      abort;
    }
    else
    {
      o_int_OptionSelected = l_int_rtnDialog;
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _Version_History(  ) void {
    MECC::TraceComment(Translate("\n***************************** LoadingDialog_Controller **************************\nAuthor: Enrique Bayo ebayo@hamilton.ch\nDate: 14May2024\nversion 2.1.15\n\nNotes:\n1. Added new column to RunData File \"DB_AddToDialog\" This would allow to define what liquids are shown in the corresponding DisplayDialog_LoadCarrier and which ones not. \ne.g: If the programmer wants to prepare mastermix on deck using an intermediate plate but don't want to show on the dialog where the mastermix would be distributed on this intermediate plate:\n                              a. Define the volume of mastermix and the volumes for each component.\n                              b. Call the calculate total volume and sequence to aspirate command for mastermix and for each component. Define this parameter as TRUE. Map this command to the template sequence on deck where the liquids should be aspirated to prepare the mastermix.\n                              c. Call the calculate total volume and sequence to aspirate command for the mastermix in the intermediate plate. Define parameter as FALSE. Map this command to the template sequence on deck where the mastermix should be prepared before transferring it to the sample plate.\n\n*************************************************************************************"));
    MECC::TraceComment(Translate("\n***************************** LoadingDialog_Controller **************************\nAuthor: Enrique Bayo ebayo@hamilton.ch\nDate: 19April2024\nversion 2.1.14\n\nNotes:\n1. Add_LabwareForCurrentProcess: Add number of units only when it is the first carrier and the first site id to prevent multiplication of tips in PDF. Calculation for DisplayDialog_Tips seems to be ok since it is filtering by labware type.\n\n*************************************************************************************"));
    MECC::TraceComment(Translate("\n***************************** LoadingDialog_Controller **************************\nAuthor: Enrique Bayo ebayo@hamilton.ch\nDate: 18April2024\nversion 2.1.13\n\nNotes:\n1. Add_LabwareForCurrentProcess: fix bug when replacing 300ul tip rack by 1ml tip rack on the same carrier\n\n*************************************************************************************"));
    MECC::TraceComment(Translate("\n***************************** LoadingDialog_Controller **************************\nAuthor: Enrique Bayo ebayo@hamilton.ch\nDate: 09April2024\nversion 2.1.12\n\nNotes:\n1. Display_ResourcesPDF: Display labware description for list of reagents\n\n*************************************************************************************"));
    MECC::TraceComment(Translate("\n***************************** LoadingDialog_Controller **************************\nAuthor: Enrique Bayo ebayo@hamilton.ch\nDate: 03April2024\nversion 2.1.11\n\nNotes:\n1. MultipleChoiceDialog_RetrieveUserSelection: fixed bug: double activation of radio-button when predefined button is different from user selection\n2. Display_ResourcesPDF: Reduced Labware detailed description from PDF to avoid redundant information.\n3. Display_ResourcesPDF: Added special character to highlight mastermix components in PDF document\n4. Display_DialogTips: Added text as input parameter\n\n*************************************************************************************"));
    MECC::TraceComment(Translate("\n***************************** LoadingDialog_Controller **************************\nAuthor: Enrique Bayo ebayo@hamilton.ch\nDate: 25Mar2024\nversion 2.1.10\n\nNotes:\n1. Identifiy labware IDs to flash from file_RunData_DB_SequenceName\n2. Allow programmer to define the MultipleChoice Radio button that should be pre-selected with boolean TRUE/FALSE.\n\n*************************************************************************************"));
    MECC::TraceComment(Translate("\n***************************** LoadingDialog_Controller **************************\nAuthor: Enrique Bayo ebayo@hamilton.ch\nDate: 12Mar2024\nversion 2.1.9\n\nNotes:\n1. Redefinition of TraceLevel\n\n*************************************************************************************"));
    MECC::TraceComment(Translate("\n***************************** LoadingDialog_Controller **************************\nAuthor: Enrique Bayo ebayo@hamilton.ch\nDate: 08Mar2024\nversion 2.1.8\n\nNotes:\n1. MultipleChoiceDialog_DisplayDialog now aborts if user presses Cancel\n\n*************************************************************************************"));
    MECC::TraceComment(Translate("\n***************************** LoadingDialog_Controller **************************\nAuthor: Enrique Bayo ebayo@hamilton.ch\nDate: 01Mar2024\nversion 2.1.7\n\nNotes:\n1. Display_ResourcesPDF: Added description for labware and units to PDF. \n2. DisplayDialog_LoadList_SingleStep: added input string to display custom text as top message in dialog\n\n*************************************************************************************"));
    MECC::TraceComment(Translate("\n***************************** LoadingDialog_Controller **************************\nAuthor: Enrique Bayo ebayo@hamilton.ch\nDate: 28Feb2024\nversion 2.1.6\n\nNotes:\n1. Ini: Kit folder path as input directory. Extract from here: KitVendor, KitName and Platform\n\n*************************************************************************************"));
    MECC::TraceComment(Translate("\n***************************** LoadingDialog_Controller **************************\nAuthor: Enrique Bayo ebayo@hamilton.ch\nDate: 26Feb2024\nversion 2.1.5\n\nNotes:\n1. Fixed bug detected when creating PDF. LabwareResource Units were not sum up\n\n*************************************************************************************"));
    MECC::TraceComment(Translate("\n***************************** LoadingDialog_Controller **************************\nAuthor: Enrique Bayo ebayo@hamilton.ch\nDate: 23Feb2024\nversion 2.1.4\n\nNotes:\n1. Redefinition of code to produce PDF in _CreateShoppingList\n\n*************************************************************************************"));
    MECC::TraceComment(Translate("\n***************************** LoadingDialog_Controller **************************\nAuthor: Enrique Bayo ebayo@hamilton.ch\nDate: 20Feb2024\nversion 2.1.3\n\nNotes:\n1. New image for DisplayDialog_Tips\n2. Added description to DisplayDialog_Tips\n3. Corrected message on DialogDisplay_MastermixRecipe\n4. RunDATA.xls is now created in Logfiles folder using naming convention KitName_RunDATA_Date_Time.xls\n\n*************************************************************************************"));
    MECC::TraceComment(Translate("\n***************************** LoadingDialog_Controller **************************\nAuthor: Enrique Bayo ebayo@hamilton.ch\nDate: 20Feb2024\nversion 2.1.2\n\nNotes:\n1. Removed condition to display PDF.\n\n*************************************************************************************"));
    MECC::TraceComment(Translate("\n***************************** LoadingDialog_Controller **************************\nAuthor: Enrique Bayo ebayo@hamilton.ch\nDate: 08Feb2024\nversion 2.1.1\n\nNotes:\n1. Added condition to display Mastermix and Consumable Shopping list (t_blnShowPDF). Abandoned. This has not been implemented. However the dialogs has been modified\nto a OKCancel dialog. The PDF document should always be produced and displayed.\n\n*************************************************************************************"));
    MECC::TraceComment(Translate("\n***************************** LoadingDialog_Controller **************************\nAuthor: Enrique Bayo ebayo@hamilton.ch\nDate: 19Jan2024\nversion 2.1.0\n\nNotes:\n1. Release to test on NGSStarlet\n\n*************************************************************************************"));
  }

  function MultipleChoiceDialog_DefineChoiceElement( variable i_int_DialogId, variable i_str_GroupName, variable i_str_Label, variable i_bln_PreSelected ) variable {
    private variable l_str_FunctionName;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_int_DialogId, Translate("i_int_DialogId"), Translate("i"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_str_GroupName, Translate("i_str_GroupName"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_str_Label, Translate("i_str_Label"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    file_MultipleChoice.AddField("DialogID", file_MultipleChoice_DialogID, hslInteger);
    file_MultipleChoice.AddField("GroupName", file_MultipleChoice_GroupName, hslString, 255);
    file_MultipleChoice.AddField("Label", file_MultipleChoice_Label, hslString, 255);
    file_MultipleChoice.AddField("Selected", file_MultipleChoice_Selected, hslInteger);
    file_MultipleChoice.AddField("Editable", file_MultipleChoice_Editable, hslInteger);
    file_MultipleChoice.AddField("ToolTip", file_MultipleChoice_ToolTip, hslString, 255);
    if( 0 == file_MultipleChoice.Open(t_str_FullpathFile_RunData + " " + "MultipleChoiceDialog_Definition$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
    }
    file_MultipleChoice_DialogID = i_int_DialogId;
    file_MultipleChoice_GroupName = i_str_GroupName;
    file_MultipleChoice_Label = i_str_Label;
    file_MultipleChoice_Selected = i_bln_PreSelected;
    file_MultipleChoice_Editable = 1;
    file_MultipleChoice_ToolTip = Translate("");
    if( 0 == file_MultipleChoice.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != file_MultipleChoice.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_MultipleChoice.RemoveFields();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function MultipleChoiceDialog_DisplayDialog( variable i_int_DialogID ) variable {
    private variable l_str_CurrentLabel;
    private variable l_str_FunctionName;
    private variable l_int_NumberOfChoices;
    private variable l_int_rtnErrorDialog;
    private variable l_str_SQLSentence;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable l_str_CurrentGroupName;
    private variable l_arr_DB_MultipleChoiceDialog_IsEditable[];
    private variable l_arr_DB_MultipleChoiceDialog_Labels[];
    private variable l_arr_DB_MultipleChoiceDialog_IsSelected[];
    private variable l_arr_DB_MultipleChoiceDialog_GroupNames[];
    private variable l_arr_DB_MultipleChoiceDialog_ToolTips[];
    private variable i_int_DialogId;
    private variable l_int_CurrentSelection;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_int_DialogId, Translate("i_int_DialogId"), Translate("i"), ASWGLOBAL::BOOL::FALSE);
    l_arr_DB_MultipleChoiceDialog_GroupNames.SetSize(0);
    l_arr_DB_MultipleChoiceDialog_IsEditable.SetSize(0);
    l_arr_DB_MultipleChoiceDialog_IsSelected.SetSize(0);
    l_arr_DB_MultipleChoiceDialog_Labels.SetSize(0);
    l_arr_DB_MultipleChoiceDialog_ToolTips.SetSize(0);
    l_str_SQLSentence = Translate("");
    l_str_SQLSentence = StrConcat12("SELECT * FROM [MultipleChoiceDialog_Definition$] WHERE [DialogID] = ","","",i_int_DialogID,"","","","","","","","");
    Trace(l_str_SQLSentence);
    file_MultipleChoice.AddField("DialogID", file_MultipleChoice_DialogID, hslInteger);
    file_MultipleChoice.AddField("GroupName", file_MultipleChoice_GroupName, hslString, 255);
    file_MultipleChoice.AddField("Label", file_MultipleChoice_Label, hslString, 255);
    file_MultipleChoice.AddField("Selected", file_MultipleChoice_Selected, hslInteger);
    file_MultipleChoice.AddField("Editable", file_MultipleChoice_Editable, hslInteger);
    file_MultipleChoice.AddField("ToolTip", file_MultipleChoice_ToolTip, hslString, 255);
    if( 0 == file_MultipleChoice.Open(t_str_FullpathFile_RunData + " " + "MultipleChoiceDialog_Definition$", hslRead, l_str_SQLSentence) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file_MultipleChoice.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file_MultipleChoice.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_arr_DB_MultipleChoiceDialog_GroupNames.AddAsLast(file_MultipleChoice_GroupName);
        l_arr_DB_MultipleChoiceDialog_Labels.AddAsLast(file_MultipleChoice_Label);
        l_arr_DB_MultipleChoiceDialog_IsEditable.AddAsLast(file_MultipleChoice_Editable);
        l_arr_DB_MultipleChoiceDialog_IsSelected.AddAsLast(file_MultipleChoice_Selected);
        l_arr_DB_MultipleChoiceDialog_ToolTips.AddAsLast(Translate(""));
      }
    }
    if( 0 != file_MultipleChoice.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_MultipleChoice.RemoveFields();
    l_int_rtnErrorDialog = VectorCustomDialogs::RadioButtonDialog(t_str_KitProvider_KitName, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, Translate("Settings"), Translate("Press OK to Continue, Cancel to abort"), l_arr_DB_MultipleChoiceDialog_Labels, l_arr_DB_MultipleChoiceDialog_ToolTips, l_arr_DB_MultipleChoiceDialog_IsEditable, l_arr_DB_MultipleChoiceDialog_IsSelected, l_arr_DB_MultipleChoiceDialog_GroupNames, VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    if (l_int_rtnErrorDialog == 2)
    {
      abort;
    }
    l_int_NumberOfChoices=l_arr_DB_MultipleChoiceDialog_IsSelected.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfChoices;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_int_CurrentSelection=l_arr_DB_MultipleChoiceDialog_IsSelected.GetAt(loopCounter2-1);
        l_str_CurrentLabel=l_arr_DB_MultipleChoiceDialog_Labels.GetAt(loopCounter2-1);
        l_str_CurrentGroupName=l_arr_DB_MultipleChoiceDialog_GroupNames.GetAt(loopCounter2-1);
        l_str_SQLSentence = StrConcat12("UPDATE [MultipleChoiceDialog_Definition$] SET [Selected] = ", l_int_CurrentSelection, " WHERE [DialogID] = ",i_int_DialogID," AND [GroupName] = '",l_str_CurrentGroupName,"' AND [Label] = '",l_str_CurrentLabel,"'","","","");
        Trace(l_str_SQLSentence);
        file_MultipleChoice.AddField("DialogID", file_MultipleChoice_DialogID, hslInteger);
        file_MultipleChoice.AddField("GroupName", file_MultipleChoice_GroupName, hslString, 255);
        file_MultipleChoice.AddField("Label", file_MultipleChoice_Label, hslString, 255);
        file_MultipleChoice.AddField("Selected", file_MultipleChoice_Selected, hslInteger);
        file_MultipleChoice.AddField("Editable", file_MultipleChoice_Editable, hslInteger);
        file_MultipleChoice.AddField("ToolTip", file_MultipleChoice_ToolTip, hslString, 255);
        if( 0 == file_MultipleChoice.Open(t_str_FullpathFile_RunData + " " + "MultipleChoiceDialog_Definition$", hslRead, l_str_SQLSentence) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
        }
        if( 0 != file_MultipleChoice.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file_MultipleChoice.RemoveFields();
      }
    }
    Util2::Debug::TraceArray(Translate("----------- Selection: Settings Dialog: l_arr_DB_MultipleChoiceDialog_IsSelected: "), l_arr_DB_MultipleChoiceDialog_IsSelected);
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function MultipleChoiceDialog_RetrieveUserSelection( variable i_int_DialogID, variable i_str_GroupName, variable & o_int_OptionSelected ) variable {
    private variable l_str_FunctionName;
    private variable l_str_SQLSentence;
    private variable loopCounter2;
    private variable l_strMessage;
    private variable i_int_DialogId;
    private variable l_str_MethodName;
    private variable l_str_Comment;
    o_int_OptionSelected = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_int_DialogId, Translate("i_int_DialogId"), Translate("i"), ASWGLOBAL::BOOL::FALSE);
    o_int_OptionSelected = 0;
    l_str_SQLSentence = StrConcat12("SELECT * FROM [MultipleChoiceDialog_Definition$] WHERE [DialogID] = ",i_int_DialogID," AND [GroupName] = '",i_str_GroupName,"","","'","","","","","");
    Trace(l_str_SQLSentence);
    file_MultipleChoice.AddField("DialogID", file_MultipleChoice_DialogID, hslInteger);
    file_MultipleChoice.AddField("GroupName", file_MultipleChoice_GroupName, hslString, 255);
    file_MultipleChoice.AddField("Label", file_MultipleChoice_Label, hslString, 255);
    file_MultipleChoice.AddField("Selected", file_MultipleChoice_Selected, hslInteger);
    file_MultipleChoice.AddField("Editable", file_MultipleChoice_Editable, hslInteger);
    file_MultipleChoice.AddField("ToolTip", file_MultipleChoice_ToolTip, hslString, 255);
    if( 0 == file_MultipleChoice.Open(t_str_FullpathFile_RunData + " " + "MultipleChoiceDialog_Definition$", hslRead, l_str_SQLSentence) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
    }
    {
      loopCounter2 = 0;
      while (
         (file_MultipleChoice.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == file_MultipleChoice.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (file_MultipleChoice_Selected == 1)
        {
          o_int_OptionSelected = loopCounter2;
          TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("o_int_OptionSelected: "), o_int_OptionSelected);
          break;
        }
      }
    }
    if( 0 != file_MultipleChoice.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_MultipleChoice.RemoveFields();
    if (o_int_OptionSelected == 0)
    {
      TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, l_str_FunctionName, l_str_MethodName, l_str_Comment);
      l_strMessage = StrConcat12(Translate("Function: "), l_str_FunctionName, Translate("\n\n"), Translate("Input parameter: i_str_GroupName has NOT been found in config file. \nPlease, ensure GroupNames for MultipleChoice dialogs are spelled correctly in your method."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      DisplayDialog_Error(l_strMessage, Translate(""), 0, Translate(""), 0);
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _CheckPoint_Variable_Type( variable i_strFunctionName, variable i_varName, variable i_strVariableName, variable i_strVariableTypeRequired, variable i_bln_AllowEmptyString ) void {
    private variable l_variableType;
    private variable l_str_Message;
    private variable l_bln_DisplayErrorMessage;
    private variable l_strExpectedVariableType;
    private variable l_strCurrentVariableType;
    l_str_Message = Translate("");
    l_variableType = StrGetType(i_varName);
    if (i_strVariableTypeRequired == "s")
    {
      l_strExpectedVariableType = Translate("string");
    }
    if (i_strVariableTypeRequired == "i")
    {
      l_strExpectedVariableType = Translate("integer");
    }
    if (i_strVariableTypeRequired == "f")
    {
      l_strExpectedVariableType = Translate("float");
    }
    if (i_strVariableTypeRequired == "if")
    {
      l_strExpectedVariableType = Translate("integer or float");
    }
    if (l_variableType == "s")
    {
      l_strCurrentVariableType = Translate("string");
    }
    if (l_variableType == "i")
    {
      l_strCurrentVariableType = Translate("integer");
    }
    if (l_variableType == "f")
    {
      l_strCurrentVariableType = Translate("float");
    }
    if (l_strExpectedVariableType == "integer")
    {
      if (l_strCurrentVariableType == "string")
      {
        l_str_Message = StrConcat12(Translate(""), Translate("Function: "), i_strFunctionName, Translate("\nError Variable type mismatch.\nVariable Name: "), i_strVariableName, Translate(" is expected to be "), l_strExpectedVariableType, Translate(" but a variable of type "), l_strCurrentVariableType, Translate(" with value = '"), i_varName, Translate("' has been detected.\nPlease review your code."));
      }
      else
      {
        l_str_Message = StrConcat12(Translate(""), Translate("Function: "), i_strFunctionName, Translate("\nError Variable type mismatch.\nVariable Name: "), i_strVariableName, Translate(" is expected to be "), l_strExpectedVariableType, Translate(" but a variable of type "), l_strCurrentVariableType, Translate(" with value = "), i_varName, Translate(" has been detected.\nPlease review your code."));
      }
    }
    else
    {
      l_str_Message = StrConcat12(Translate(""), Translate("Function: "), i_strFunctionName, Translate("\nError Variable type mismatch.\nVariable Name: "), i_strVariableName, Translate(" is expected to be "), l_strExpectedVariableType, Translate(" but a variable of type "), l_strCurrentVariableType, Translate(" with value = "), i_varName, Translate(" has been detected.\nPlease review your code."));
    }
    if (i_strVariableTypeRequired == l_variableType)
    {
      if (l_variableType == "s")
      {
        if (i_varName == "")
        {
          if (i_bln_AllowEmptyString == ASWGLOBAL::BOOL::FALSE)
          {
            l_bln_DisplayErrorMessage = ASWGLOBAL::BOOL::TRUE;
            l_str_Message = StrConcat12(Translate(""), Translate("Function: "), i_strFunctionName, Translate("\nError Variable empty.\nVariable Name: "), i_strVariableName, Translate(" is expected to be "), l_strExpectedVariableType, Translate(" but a variable of type "), l_strCurrentVariableType, Translate(" with empty text"), Translate(""), Translate(" has been detected.\nPlease review your code."));
          }
          else
          {
            l_bln_DisplayErrorMessage = ASWGLOBAL::BOOL::FALSE;
          }
        }
        else
        {
          l_bln_DisplayErrorMessage = ASWGLOBAL::BOOL::FALSE;
        }
      }
      else
      {
        l_bln_DisplayErrorMessage = ASWGLOBAL::BOOL::FALSE;
      }
    }
    else
    {
      if (i_strVariableTypeRequired == "if")
      {
        if (l_variableType == "i")
        {
          l_bln_DisplayErrorMessage = ASWGLOBAL::BOOL::FALSE;
        }
        if (l_variableType == "f")
        {
          l_bln_DisplayErrorMessage = ASWGLOBAL::BOOL::FALSE;
        }
        if (l_variableType == "s")
        {
          l_bln_DisplayErrorMessage = ASWGLOBAL::BOOL::TRUE;
        }
      }
      else
      {
        l_bln_DisplayErrorMessage = ASWGLOBAL::BOOL::TRUE;
      }
    }
    if (l_bln_DisplayErrorMessage == ASWGLOBAL::BOOL::TRUE)
    {
      DisplayDialog_Error(l_str_Message, Translate(""), 0, Translate(""), 0);
    }
  }

  function SelectProcesses_DisplayDialog( variable & i_arr_strProcessId[], variable & i_arr_strProcessCombinations[], variable & i_arr_intProcessDeactivatedStartPoints[], variable & i_arr_intProcessDeactivatedStopPoints[], variable & o_int_StartProcess, variable & o_int_StopProcess, variable & o_arr_blnProcessActivationStatus[] ) variable {
    private variable loopCounter7;
    private variable loopCounter9;
    private variable l_int_ReturnLookUp_ProcessExistsInCombination;
    private variable l_int_NumberOfDeactivatedStartPoints;
    private variable l_int_CurrentProcess;
    private variable l_str_FunctionName;
    private variable l_str_DeactivatedStopProcessId;
    private variable l_strWrapOrientation_ElementsInDialog;
    private variable l_int_ProcessCounter;
    private variable l_intReturnDisplayDialog;
    private variable l_int_TotalNumberOfProcesses;
    private variable loopCounter1;
    private variable l_int_NumberOfDeactivatedStopPoints;
    private variable l_str_ProcessCombination;
    private variable l_int_NumberOfProcessInCombination;
    private variable l_int_StartProcess;
    private variable l_str_DeactivatedStartProcessId;
    private variable l_str_TopText;
    private variable l_int_StopProcess;
    private variable loopCounter3;
    private variable l_int_TotalNumberOfProcessPlusStartProcess;
    private variable loopCounter4;
    private variable l_int_ReturnSearchProcessDeactivated;
    private variable l_int_ReturnLookUp_ProcessIsDeactivated;
    private variable loopCounter5;
    private variable l_bln_DeactivatedSTARProcess_Detected;
    private variable l_int_SelectFirstProcessActivated;
    private variable l_arr_ToolTips[];
    private variable l_arr_IsSelected[];
    private variable l_arr_int_ProcessCombination[];
    private variable l_arr_GroupName[];
    private variable l_arr_Labels[];
    private variable l_arr_str_ProcessCombination[];
    private variable l_arr_ProcessToShowOnSTARTDialog[];
    private variable l_arr_IsEditable[];
    private variable l_arr_ProcessToShowOnSTOPDialog[];
    private variable loopCounterCheckArrayContent;
    private variable l_int_TotalNumberOfProcessesToCheck;
    private variable l_strErrorMessage;
    o_int_StartProcess = 0;
    o_int_StopProcess = 0;
    o_arr_blnProcessActivationStatus.SetSize( 0);
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    TRACELEVEL::TraceArray(t_intGetTraceLevel, Translate("i_arr_strProcessId: "), i_arr_strProcessId);
    TRACELEVEL::TraceArray(t_intGetTraceLevel, Translate("i_arr_strProcessCombinations: "), i_arr_strProcessCombinations);
    TRACELEVEL::TraceArray(t_intGetTraceLevel, Translate("i_arr_intProcessDeactivatedStartPoints: "), i_arr_intProcessDeactivatedStartPoints);
    TRACELEVEL::TraceArray(t_intGetTraceLevel, Translate("i_arr_intProcessDeactivatedStopPoints: "), i_arr_intProcessDeactivatedStopPoints);
    o_arr_blnProcessActivationStatus.SetSize(0);
    l_arr_ProcessToShowOnSTARTDialog.SetSize(0);
    l_arr_ProcessToShowOnSTOPDialog.SetSize(0);
    l_arr_GroupName.SetSize(0);
    l_arr_Labels.SetSize(0);
    l_arr_IsEditable.SetSize(0);
    l_arr_IsSelected.SetSize(0);
    l_arr_ToolTips.SetSize(0);
    l_strWrapOrientation_ElementsInDialog = VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical;
    l_int_StartProcess = 0;
    l_int_StopProcess = 0;
    l_int_ProcessCounter = 0;
    l_int_TotalNumberOfProcesses=i_arr_strProcessId.GetSize();
    if (l_int_TotalNumberOfProcesses == 0)
    {
      l_strErrorMessage = StrConcat12(Translate("Function: "), l_str_FunctionName, Translate("\n\n"), Translate("Number of Process IDs defined ("), l_int_TotalNumberOfProcesses, Translate(")"), Translate(""), Translate("\n\n"), Translate("Please, go back to your method and define Process IDs"), Translate(""), Translate(""), Translate(""));
      DisplayDialog_Error(l_strErrorMessage, Translate(""), 0, Translate(""), 0);
    }
    else
    {
      {
        for(loopCounterCheckArrayContent = 0; loopCounterCheckArrayContent < l_int_TotalNumberOfProcesses;)
        {
          loopCounterCheckArrayContent = loopCounterCheckArrayContent + 1;
          _CheckPoint_Variable_Type(l_str_FunctionName, i_arr_strProcessId.ElementAt( loopCounterCheckArrayContent -1), Translate("i_arr_strProcessId"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    l_int_TotalNumberOfProcessesToCheck=i_arr_strProcessCombinations.GetSize();
    if (l_int_TotalNumberOfProcessesToCheck != l_int_TotalNumberOfProcesses)
    {
      l_strErrorMessage = StrConcat12(Translate("Function: "), l_str_FunctionName, Translate("\n\n"), Translate("Number of Process IDs defined ("), l_int_TotalNumberOfProcesses, Translate(") does NOT match the number of combinations ("), l_int_TotalNumberOfProcessesToCheck, Translate(").\n\n"), Translate("Please, go back to your method and define one Process combination for each Process ID"), Translate(""), Translate(""), Translate(""));
      DisplayDialog_Error(l_strErrorMessage, Translate(""), 0, Translate(""), 0);
    }
    else
    {
      if (l_int_TotalNumberOfProcessesToCheck != 0)
      {
        {
          for(loopCounterCheckArrayContent = 0; loopCounterCheckArrayContent < l_int_TotalNumberOfProcessesToCheck;)
          {
            loopCounterCheckArrayContent = loopCounterCheckArrayContent + 1;
            _CheckPoint_Variable_Type(l_str_FunctionName, i_arr_strProcessCombinations.ElementAt( loopCounterCheckArrayContent -1), Translate("i_arr_strProcessCombinations"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
          }
        }
      }
      else
      {
        l_strErrorMessage = StrConcat12(Translate("Function: "), l_str_FunctionName, Translate("\n\n"), Translate("Number of Process IDs defined ("), l_int_TotalNumberOfProcesses, Translate(") and number of combinations defined ("), l_int_TotalNumberOfProcessesToCheck, Translate(").\n\n"), Translate("Please, go back to your method and define one Process combination for each Process ID"), Translate(""), Translate(""), Translate(""));
        DisplayDialog_Error(l_strErrorMessage, Translate(""), 0, Translate(""), 0);
      }
    }
    l_int_TotalNumberOfProcessesToCheck=i_arr_intProcessDeactivatedStartPoints.GetSize();
    if (l_int_TotalNumberOfProcessesToCheck != 0)
    {
      {
        for(loopCounterCheckArrayContent = 0; loopCounterCheckArrayContent < l_int_TotalNumberOfProcessesToCheck;)
        {
          loopCounterCheckArrayContent = loopCounterCheckArrayContent + 1;
          _CheckPoint_Variable_Type(l_str_FunctionName, i_arr_intProcessDeactivatedStartPoints.ElementAt( loopCounterCheckArrayContent -1), Translate("i_arr_intProcessDeactivatedStartPoints"), Translate("i"), ASWGLOBAL::BOOL::FALSE);
        }
      }
      if (i_arr_intProcessDeactivatedStartPoints.ElementAt( loopCounterCheckArrayContent -1) > l_int_TotalNumberOfProcesses)
      {
        l_strErrorMessage = StrConcat12(Translate("Function: "), l_str_FunctionName, Translate("\n\n"), Translate("Number of Process IDs defined = "), l_int_TotalNumberOfProcesses, Translate("\nCurrent Process defined as a Deactivated START point = "), i_arr_intProcessDeactivatedStartPoints.ElementAt( loopCounterCheckArrayContent -1), Translate("\nOnly integers between 1 and "), l_int_TotalNumberOfProcesses, Translate(" are accepted. \nPlease review your code."), Translate(""), Translate("\nHint: Leave this array empty in your method if you do not wish to deactivate START points in the user dialog.\n"));
        DisplayDialog_Error(l_strErrorMessage, Translate(""), 0, Translate(""), 0);
      }
    }
    l_int_TotalNumberOfProcessesToCheck=i_arr_intProcessDeactivatedStopPoints.GetSize();
    if (l_int_TotalNumberOfProcessesToCheck != 0)
    {
      {
        for(loopCounterCheckArrayContent = 0; loopCounterCheckArrayContent < l_int_TotalNumberOfProcessesToCheck;)
        {
          loopCounterCheckArrayContent = loopCounterCheckArrayContent + 1;
          _CheckPoint_Variable_Type(l_str_FunctionName, i_arr_intProcessDeactivatedStopPoints.ElementAt( loopCounterCheckArrayContent -1), Translate("i_arr_intProcessDeactivatedStopPoints"), Translate("i"), ASWGLOBAL::BOOL::FALSE);
        }
      }
      if (i_arr_intProcessDeactivatedStopPoints.ElementAt( loopCounterCheckArrayContent -1) > l_int_TotalNumberOfProcesses)
      {
        l_strErrorMessage = StrConcat12(Translate("Function: "), l_str_FunctionName, Translate("\n\n"), Translate("Number of Process IDs defined = "), l_int_TotalNumberOfProcesses, Translate("\nCurrent Process defined as a Deactivated STOP point = "), i_arr_intProcessDeactivatedStopPoints.ElementAt( loopCounterCheckArrayContent -1), Translate("\nOnly integers between 1 and "), l_int_TotalNumberOfProcesses, Translate(" are accepted. \nPlease review your code."), Translate(""), Translate("\nHint: Leave this array empty in your method if you do not wish to deactivate STOP points in the user dialog.\n"));
        DisplayDialog_Error(l_strErrorMessage, Translate(""), 0, Translate(""), 0);
      }
    }
    l_int_TotalNumberOfProcesses=i_arr_strProcessId.GetSize();
    l_bln_DeactivatedSTARProcess_Detected = ASWGLOBAL::BOOL::FALSE;
    l_int_SelectFirstProcessActivated = 0;
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_TotalNumberOfProcesses;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_arr_GroupName.AddAsLast(Translate("Start Process"));
        l_int_ReturnSearchProcessDeactivated = ARRAYTOOLS::Lookup(i_arr_intProcessDeactivatedStartPoints, loopCounter1);
        if (l_int_ReturnSearchProcessDeactivated > 0)
        {
          l_arr_ProcessToShowOnSTARTDialog.AddAsLast(ASWGLOBAL::BOOL::FALSE);
          l_arr_IsEditable.AddAsLast(0);
          l_arr_IsSelected.AddAsLast(0);
        }
        else
        {
          l_arr_ProcessToShowOnSTARTDialog.AddAsLast(ASWGLOBAL::BOOL::TRUE);
          l_int_SelectFirstProcessActivated = l_int_SelectFirstProcessActivated + 1;
          l_arr_IsEditable.AddAsLast(1);
          if (l_int_SelectFirstProcessActivated == 1)
          {
            l_arr_IsSelected.AddAsLast(1);
          }
          else
          {
            l_arr_IsSelected.AddAsLast(0);
          }
        }
        l_arr_Labels.AddAsLast(i_arr_strProcessId.ElementAt( loopCounter1 -1));
      }
    }
    l_int_NumberOfDeactivatedStartPoints=i_arr_intProcessDeactivatedStartPoints.GetSize();
    l_str_TopText = Translate("Define Workflow ");
    {
      for(loopCounter5 = 0; loopCounter5 < l_int_NumberOfDeactivatedStartPoints;)
      {
        loopCounter5 = loopCounter5 + 1;
        l_str_DeactivatedStartProcessId=i_arr_strProcessId.GetAt(i_arr_intProcessDeactivatedStartPoints.ElementAt( loopCounter5 -1)-1);
        if (loopCounter5 == 1)
        {
          l_str_TopText = StrConcat8(l_str_TopText, Translate("Deactivated Starting Points:"), Translate("\n"), Translate("\n"), Translate("- "), Translate("["), l_str_DeactivatedStartProcessId, Translate("] "));
        }
        else
        {
          l_str_TopText = StrConcat8(l_str_TopText, Translate("\n"), Translate(""), Translate(""), Translate("- "), Translate("["), l_str_DeactivatedStartProcessId, Translate("] "));
        }
      }
    }
    l_intReturnDisplayDialog = VectorCustomDialogs::RadioButtonDialog(Translate(""), VectorCustomDialogs::ButtonType::AcceptCancel, 0, 0, l_str_TopText, Translate("Press Accept to confirm, Cancel to abort"), l_arr_Labels, l_arr_ToolTips, l_arr_IsEditable, l_arr_IsSelected, l_arr_GroupName, VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    if (l_intReturnDisplayDialog == 2)
    {
      abort;
    }
    {
      for(loopCounter3 = 0; loopCounter3 < l_int_TotalNumberOfProcesses;)
      {
        loopCounter3 = loopCounter3 + 1;
        l_int_ProcessCounter = l_int_ProcessCounter + 1;
        if (l_arr_IsSelected.ElementAt( loopCounter3 -1) == 1)
        {
          l_int_StartProcess = loopCounter3;
          o_arr_blnProcessActivationStatus.AddAsLast(ASWGLOBAL::BOOL::TRUE);
        }
        else
        {
          o_arr_blnProcessActivationStatus.AddAsLast(ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    l_arr_GroupName.SetSize(0);
    l_arr_Labels.SetSize(0);
    l_arr_IsEditable.SetSize(0);
    l_arr_IsSelected.SetSize(0);
    l_arr_ToolTips.SetSize(0);
    l_int_NumberOfDeactivatedStopPoints=i_arr_intProcessDeactivatedStopPoints.GetSize();
    l_str_TopText = Translate("Define Workflow ");
    {
      for(loopCounter5 = 0; loopCounter5 < l_int_NumberOfDeactivatedStopPoints;)
      {
        loopCounter5 = loopCounter5 + 1;
        l_str_DeactivatedStopProcessId=i_arr_strProcessId.GetAt(i_arr_intProcessDeactivatedStopPoints.ElementAt( loopCounter5 -1)-1);
        if (loopCounter5 == 1)
        {
          l_str_TopText = StrConcat8(l_str_TopText, Translate("Deactivated Stop Points:"), Translate("\n"), Translate("\n"), Translate("- "), Translate("["), l_str_DeactivatedStopProcessId, Translate("] "));
        }
        else
        {
          l_str_TopText = StrConcat8(l_str_TopText, Translate("\n"), Translate(""), Translate(""), Translate("- "), Translate("["), l_str_DeactivatedStopProcessId, Translate("] "));
        }
      }
    }
    l_arr_GroupName.AddAsLast(Translate("Start Process"));
    l_arr_Labels.AddAsLast(i_arr_strProcessId.ElementAt( l_int_StartProcess -1));
    l_arr_IsEditable.AddAsLast(0);
    l_arr_IsSelected.AddAsLast(0);
    l_arr_int_ProcessCombination.SetSize(0);
    l_str_ProcessCombination=i_arr_strProcessCombinations.GetAt(l_int_StartProcess-1);
    STRTOKENIZE::StrTokenize(l_str_ProcessCombination, Translate("."), l_arr_str_ProcessCombination, ASWGLOBAL::BOOL::FALSE);
    l_int_NumberOfProcessInCombination=l_arr_str_ProcessCombination.GetSize();
    {
      for(loopCounter7 = 0; loopCounter7 < l_int_NumberOfProcessInCombination;)
      {
        loopCounter7 = loopCounter7 + 1;
        l_int_CurrentProcess = StrIVal(l_arr_str_ProcessCombination.ElementAt( loopCounter7 -1));
        l_arr_int_ProcessCombination.AddAsLast(l_int_CurrentProcess);
      }
    }
    l_int_SelectFirstProcessActivated = 0;
    {
      for(loopCounter9 = 0; loopCounter9 < l_int_TotalNumberOfProcesses;)
      {
        loopCounter9 = loopCounter9 + 1;
        l_arr_GroupName.AddAsLast(Translate("Stop Process"));
        l_int_ReturnLookUp_ProcessExistsInCombination = ARRAYTOOLS::Lookup(l_arr_int_ProcessCombination, loopCounter9);
        if (l_int_ReturnLookUp_ProcessExistsInCombination > 0)
        {
          l_int_ReturnLookUp_ProcessIsDeactivated = ARRAYTOOLS::Lookup(i_arr_intProcessDeactivatedStopPoints, loopCounter9);
          if (l_int_ReturnLookUp_ProcessIsDeactivated > 0)
          {
            l_arr_IsEditable.AddAsLast(0);
            l_arr_IsSelected.AddAsLast(0);
          }
          else
          {
            l_int_SelectFirstProcessActivated = l_int_SelectFirstProcessActivated + 1;
            if (l_int_SelectFirstProcessActivated == 1)
            {
              l_arr_IsEditable.AddAsLast(1);
              l_arr_IsSelected.AddAsLast(1);
            }
            else
            {
              l_arr_IsEditable.AddAsLast(1);
              l_arr_IsSelected.AddAsLast(0);
            }
          }
          ARRAYTOOLS::Update_Value_in_Array(o_arr_blnProcessActivationStatus, ASWGLOBAL::BOOL::TRUE, loopCounter9);
        }
        else
        {
          l_arr_IsEditable.AddAsLast(0);
          l_arr_IsSelected.AddAsLast(0);
          ARRAYTOOLS::Update_Value_in_Array(o_arr_blnProcessActivationStatus, ASWGLOBAL::BOOL::FALSE, loopCounter9);
        }
        l_arr_Labels.AddAsLast(i_arr_strProcessId.ElementAt( loopCounter9 -1));
      }
    }
    l_intReturnDisplayDialog = VectorCustomDialogs::RadioButtonDialog(Translate(""), VectorCustomDialogs::ButtonType::AcceptCancel, 0, 0, l_str_TopText, Translate("Press Accept to confirm, Cancel to abort"), l_arr_Labels, l_arr_ToolTips, l_arr_IsEditable, l_arr_IsSelected, l_arr_GroupName, VectorCustomDialogs::RadioButtonDialog::WrapOrientation::Vertical, VectorCustomDialogs::RadioButtonDialog::SortDirection::Unsorted);
    if (l_intReturnDisplayDialog == 2)
    {
      abort;
    }
    l_int_ProcessCounter = 0;
    l_int_TotalNumberOfProcessPlusStartProcess = l_int_TotalNumberOfProcesses + 1;
    {
      for(loopCounter4 = 0; loopCounter4 < l_int_TotalNumberOfProcessPlusStartProcess;)
      {
        loopCounter4 = loopCounter4 + 1;
        if (loopCounter4 != 1)
        {
          l_int_ProcessCounter = l_int_ProcessCounter + 1;
          if (l_arr_IsSelected.ElementAt( loopCounter4 -1) == 1)
          {
            l_int_StopProcess = l_int_ProcessCounter;
          }
        }
      }
    }
    o_int_StartProcess = l_int_StartProcess;
    o_int_StopProcess = l_int_StopProcess;
    {
      for(loopCounter9 = 0; loopCounter9 < l_int_TotalNumberOfProcesses;)
      {
        loopCounter9 = loopCounter9 + 1;
        if (loopCounter9 < l_int_StartProcess)
        {
          ARRAYTOOLS::Update_Value_in_Array(o_arr_blnProcessActivationStatus, ASWGLOBAL::BOOL::FALSE, loopCounter9);
        }
        if (loopCounter9 > l_int_StopProcess)
        {
          ARRAYTOOLS::Update_Value_in_Array(o_arr_blnProcessActivationStatus, ASWGLOBAL::BOOL::FALSE, loopCounter9);
        }
      }
    }
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("User selected START Process: "), l_int_StartProcess);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("User selected STOP Process: "), l_int_StopProcess);
    TRACELEVEL::TraceArray(t_intGetTraceLevel, Translate("o_arr_blnProcessActivationStatus: "), o_arr_blnProcessActivationStatus);
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function DisplayDialog_DataInput( variable i_strTopText, variable i_strMainText, variable i_strDescription, variable i_strCustomToolTip, variable i_intDataType, variable i_strRange, variable & o_varOutput, variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable {
    private variable l_bln_DisplayDialog;
    private variable l_intReturnDisplayDialog;
    private variable l_arr_DataTypes[];
    private variable l_arr_Result[];
    private variable l_arr_ListLabels[];
    private variable l_arr_ListUnits[];
    private variable l_arr_ListValues[];
    private variable l_arr_CustomToolTip[];
    private variable l_arr_Ranges[];
    private variable l_str_FunctionName;
    o_varOutput = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_intDataType, Translate("i_intDataType"), Translate("i"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_strCustomToolTip, Translate("i_strCustomToolTip"), Translate("s"), ASWGLOBAL::BOOL::TRUE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_strDescription, Translate("i_strDescription"), Translate("s"), ASWGLOBAL::BOOL::TRUE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_strTopText, Translate("i_strTopText"), Translate("s"), ASWGLOBAL::BOOL::TRUE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_strMainText, Translate("i_strMainText"), Translate("s"), ASWGLOBAL::BOOL::TRUE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_strRange, Translate("i_strRange"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    l_arr_CustomToolTip.SetSize(0);
    l_arr_DataTypes.SetSize(0);
    l_arr_CustomToolTip.SetSize(0);
    l_arr_ListLabels.SetSize(0);
    l_arr_ListUnits.SetSize(0);
    l_arr_ListValues.SetSize(0);
    l_arr_Ranges.SetSize(0);
    l_arr_Result.SetSize(0);
    l_bln_DisplayDialog = ASWGLOBAL::BOOL::TRUE;
    l_arr_CustomToolTip.AddAsLast(i_strCustomToolTip);
    l_arr_DataTypes.AddAsLast(i_intDataType);
    l_arr_ListLabels.AddAsLast(i_strMainText);
    l_arr_ListUnits.AddAsLast(i_strDescription);
    l_arr_ListValues.AddAsLast(Translate(""));
    l_arr_Ranges.AddAsLast(i_strRange);
    if (i_str_SoundFilePath != "")
    {
      VectorCustomDialogs::ActivateSoundForNextDialog(i_str_SoundFilePath, i_int_SoundLoop);
    }
    l_intReturnDisplayDialog = VectorCustomDialogs::InputDialog(t_str_KitProvider_KitName, VectorCustomDialogs::ButtonType::Ok, 0, 0, i_strTopText, Translate("Press OK to Continue"), l_arr_ListLabels, l_arr_ListValues, l_arr_ListUnits, l_arr_DataTypes, l_arr_Ranges, l_arr_CustomToolTip, l_arr_Result);
    o_varOutput=l_arr_Result.GetAt(1-1);
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Define_VolumePerWell( variable i_str_LiquidName, variable & i_flt_VolumePerSample ) variable {
    private variable l_str_FunctionName;
    private variable l_int_RecordCounter;
    private variable l_str_SQLSentence;
    private variable loopCounter1;
    private variable l_flt_TempVolumePerWell;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_flt_VolumePerSample, Translate("i_flt_VolumePerSample"), Translate("if"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_str_LiquidName, Translate("i_str_LiquidName"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("i_str_LiquidName: "), i_str_LiquidName);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("i_flt_VolumePerSample: "), i_flt_VolumePerSample);
    _Reset_FileRunData_Variables();
    l_int_RecordCounter = 0;
    l_str_SQLSentence = Translate("");
    l_flt_TempVolumePerWell = 0;
    l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_Name] = '",i_str_LiquidName,"'","","","","","","","","","");
    //Trace(l_str_SQLSentence);
    _FileOpenRunData(l_str_SQLSentence, 1);
    {
      loopCounter1 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_int_RecordCounter = l_int_RecordCounter + 1;
        l_flt_TempVolumePerWell = l_flt_TempVolumePerWell + file_RunData_DB_VolumePerWell;
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    if (l_int_RecordCounter > 0)
    {
      MECC::TraceComment(Translate("Liquid Name Found in DB_Name Column"));
      l_flt_TempVolumePerWell = l_flt_TempVolumePerWell + i_flt_VolumePerSample;
      l_str_SQLSentence = StrConcat12("UPDATE [RunData$] SET [DB_VolumePerWell] = ",l_flt_TempVolumePerWell," WHERE [DB_Name] = '",i_str_LiquidName,"'","","","","","","","");
      Trace(l_str_SQLSentence);
      _FileOpenRunData(l_str_SQLSentence, 1);
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
    }
    else
    {
      MECC::TraceComment(Translate("Liquid Name NOT Found in DB_Name Column"));
      _FileOpenRunData(Translate(""), 2);
      file_RunData_DB_VolumePerWell = i_flt_VolumePerSample;
      file_RunData_DB_Name = i_str_LiquidName;
      file_RunData_DB_Type = t_strType_Reagent;
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_Type: "), file_RunData_DB_Type);
      if( 0 == file_RunData.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Define_VolumePerWell_MastermixComponent( variable i_str_MastermixLiquidName, variable i_str_ComponentLiquidName, variable i_flt_VolumePerSample ) variable {
    private variable l_flt_CurrentMasterMix_Volume;
    private variable l_flt_Ratio;
    private variable l_str_FunctionName;
    private variable l_str_ReagentType;
    private variable l_bln_ErrorUpdating;
    private variable loopCounter1;
    private variable l_str_SQLSentence;
    private timer l_timer_RecoverError;
    private variable l_flt_CurrentMasterMix_TotalVolume;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_flt_VolumePerSample, Translate("i_flt_VolumePerSample"), Translate("if"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_str_ComponentLiquidName, Translate("i_str_ComponentLiquidName"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    _Reset_FileRunData_Variables();
    l_str_ReagentType = t_strType_Mastermix;
    l_bln_ErrorUpdating = ASWGLOBAL::BOOL::TRUE;
    {
      loopCounter1 = 0;
      while (l_bln_ErrorUpdating == ASWGLOBAL::BOOL::TRUE)
      {
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_1 ;
        err.Clear();
        l_flt_Ratio = 1.0;
        _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_Ratio"), l_flt_Ratio, Translate("DB_Name"), i_str_MastermixLiquidName);
        _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_Type"), t_strType_Mastermix, Translate("DB_Name"), i_str_MastermixLiquidName);
        l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_Name] = '",i_str_MastermixLiquidName,"'","","","","","","","","","");
        Trace(l_str_SQLSentence);
        _FileOpenRunData(l_str_SQLSentence, 1);
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_flt_CurrentMasterMix_Volume = file_RunData_DB_VolumePerWell;
        l_flt_CurrentMasterMix_TotalVolume = file_RunData_DB_TotalVolume;
        if( 0 != file_RunData.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file_RunData.RemoveFields();
        l_bln_ErrorUpdating = ASWGLOBAL::BOOL::FALSE;
        errLabel_1 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          if (loopCounter1 == 3)
          {
            DisplayDialog_Error(Translate("Cannot update DB. Restart protocol"), 1, 15, Translate(""), 0);
          }
          l_bln_ErrorUpdating = ASWGLOBAL::BOOL::TRUE;
          if( 0 == l_timer_RecoverError.SetTimer(2) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_timer_RecoverError.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }   /* end if from skip handler if no error */
      }
    }
    TRACELEVEL::Trace_10(t_intGetTraceLevel, Translate("Adding to File "), i_flt_VolumePerSample, Translate(" µL of "), Translate(""), Translate(""), i_str_ComponentLiquidName, Translate(" of Mastermix "), i_str_MastermixLiquidName, Translate(""), Translate(""));
    _FileOpenRunData(Translate(""), 2);
    file_RunData_DB_VolumePerWell = i_flt_VolumePerSample;
    file_RunData_DB_Name = i_str_ComponentLiquidName;
    file_RunData_DB_MastermixName = i_str_MastermixLiquidName;
    file_RunData_DB_Type = t_strType_MastermixComponent;
    file_RunData_DB_MasterMixComponentName = i_str_ComponentLiquidName;
    file_RunData_DB_CarrierName = Translate("");
    file_RunData_DB_Units = 0;
    file_RunData_DB_TrackNumber = 0;
    file_RunData_DB_ContainerDescription = Translate("");
    file_RunData_DB_ContainerViewName = Translate("");
    file_RunData_DB_LabwareDescription = Translate("");
    file_RunData_DB_LabwareFileName = Translate("");
    file_RunData_DB_LabwareName = Translate("");
    file_RunData_DB_PositionID = Translate("");
    file_RunData_DB_SequenceName = Translate("");
    file_RunData_DB_SiteID = Translate("");
    file_RunData_DB_SiteID = Translate("");
    if( 0 == file_RunData.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _RunDATA_Find_Record( variable i_str_ColumnName, variable i_value, variable i_CarrierName, variable i_int_FileHandler, variable & o_intNumberOfElementsFound ) variable {
    private variable l_int_TotalNumberOfElements;
    private variable l_str_inputValueVarType;
    private variable l_int_RecordCounter;
    private variable l_str_SQLSentence;
    private variable loopCounter1;
    private variable l_int_RunData_DB_Units;
    o_intNumberOfElementsFound = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    l_int_RecordCounter = 0;
    l_str_SQLSentence = Translate("");
    l_str_inputValueVarType = StrGetType(i_value);
    if (i_CarrierName == "")
    {
      if (l_str_inputValueVarType == "s")
      {
        l_str_SQLSentence = StrConcat12("SELECT * FROM [RunDATA$] WHERE [",i_str_ColumnName,"] = '",i_value,"","","'","","","","","");
        Trace(l_str_SQLSentence);
      }
      else
      {
        l_str_SQLSentence = StrConcat12("SELECT * FROM [RunDATA$] WHERE [",i_str_ColumnName,"] = ",i_value,"","","","","","","","");
        Trace(l_str_SQLSentence);
      }
    }
    else
    {
      if (l_str_inputValueVarType == "s")
      {
        l_str_SQLSentence = StrConcat12("SELECT * FROM [RunDATA$] WHERE [",i_str_ColumnName,"] = '",i_value,"' AND [DB_CarrierName] = '",i_CarrierName,"'","","","","","");
        Trace(l_str_SQLSentence);
      }
      else
      {
        l_str_SQLSentence = StrConcat12("SELECT * FROM [RunDATA$] WHERE [",i_str_ColumnName,"] = ",i_value," AND [DB_CarrierName] = '",i_CarrierName,"'","","","","","");
        Trace(l_str_SQLSentence);
      }
    }
    l_int_TotalNumberOfElements = 0;
    if (i_int_FileHandler == 1)
    {
      _FileOpenRunData(l_str_SQLSentence, 1);
      {
        loopCounter1 = 0;
        while (
           (file_RunData.Eof() == 0)
        )
        {
          loopCounter1 = loopCounter1 + 1;
          if( 0 == file_RunData.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_int_RecordCounter = l_int_RecordCounter + 1;
          l_int_RunData_DB_Units = StrIVal(file_RunData_DB_Units);
          l_int_TotalNumberOfElements = l_int_TotalNumberOfElements + l_int_RunData_DB_Units;
        }
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
    }
    else
    {
      file_MultipleChoice.AddField("DialogID", file_MultipleChoice_DialogID, hslString, 255);
      file_MultipleChoice.AddField("GroupName", file_MultipleChoice_GroupName, hslString, 255);
      file_MultipleChoice.AddField("Label", file_MultipleChoice_Label, hslString, 255);
      file_MultipleChoice.AddField("Selected", file_MultipleChoice_Selected, hslString, 255);
      file_MultipleChoice.AddField("Editable", file_MultipleChoice_Editable, hslString, 255);
      file_MultipleChoice.AddField("ToolTip", file_MultipleChoice_ToolTip, hslString, 255);
      if( 0 == file_MultipleChoice.Open(t_str_FullpathFile_RunData + " " + "MultipleChoiceDialog_Definition$", hslRead, l_str_SQLSentence) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
      {
        loopCounter1 = 0;
        while (
           (file_MultipleChoice.Eof() == 0)
        )
        {
          loopCounter1 = loopCounter1 + 1;
          if( 0 == file_MultipleChoice.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_int_RecordCounter = l_int_RecordCounter + 1;
        }
      }
      if( 0 != file_MultipleChoice.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_MultipleChoice.RemoveFields();
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    if (l_int_RecordCounter > 0)
    {
      o_intNumberOfElementsFound = l_int_TotalNumberOfElements;
      return (ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      o_intNumberOfElementsFound = 0;
      return (ASWGLOBAL::BOOL::FALSE);
    }
  }

  private function _RunDATA_UpdateRecord( variable i_str_SheetName, variable i_str_ColumnName, variable i_keyNewValue, variable i_str_ColumnReference, variable i_keyValueReference ) void {
    private variable l_str_Type_keyNewValue;
    private variable l_bln_errorUpdating;
    private variable l_str_Type_keyValueReference;
    private variable loopCounter1;
    private variable l_str_SQLSentence;
    private timer l_timer_errorUpdating;
    private variable t_str_FunctionName;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    l_bln_errorUpdating = ASWGLOBAL::BOOL::TRUE;
    i_str_SheetName = StrConcat2(i_str_SheetName, Translate("$"));
    {
      loopCounter1 = 0;
      while (l_bln_errorUpdating == ASWGLOBAL::BOOL::TRUE)
      {
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_2 ;
        err.Clear();
        l_str_Type_keyNewValue = StrGetType(i_keyNewValue);
        l_str_Type_keyValueReference = StrGetType(i_keyValueReference);
        if (l_str_Type_keyNewValue == "s")
        {
          if (l_str_Type_keyValueReference == "s")
          {
            l_str_SQLSentence=StrConcat12("UPDATE [",i_str_SheetName,"] SET [",i_str_ColumnName,"] ='",i_keyNewValue,"' WHERE [",i_str_ColumnReference,"] = '",i_keyValueReference,"'","");
            Trace(l_str_SQLSentence);
          }
          else
          {
            l_str_SQLSentence=StrConcat12("UPDATE [",i_str_SheetName,"] SET [",i_str_ColumnName,"] ='",i_keyNewValue,"' WHERE [",i_str_ColumnReference,"] = ",i_keyValueReference,"","");
            Trace(l_str_SQLSentence);
          }
          file_RunData.AddField(i_str_ColumnName, i_keyNewValue, hslString, 255);
          if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + i_str_SheetName, hslRead, l_str_SQLSentence) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
          }
        }
        else
        {
          if (l_str_Type_keyValueReference == "s")
          {
            l_str_SQLSentence=StrConcat12("UPDATE [",i_str_SheetName,"] SET [",i_str_ColumnName,"] =",i_keyNewValue," WHERE [",i_str_ColumnReference,"] = '",i_keyValueReference,"'","");
            Trace(l_str_SQLSentence);
          }
          else
          {
            l_str_SQLSentence=StrConcat12("UPDATE [",i_str_SheetName,"] SET [",i_str_ColumnName,"] =",i_keyNewValue," WHERE [",i_str_ColumnReference,"] = ",i_keyValueReference,"","");
            Trace(l_str_SQLSentence);
          }
          if (l_str_Type_keyNewValue == "f")
          {
            file_RunData.AddField(i_str_ColumnName, i_keyNewValue, hslFloat);
            if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + i_str_SheetName, hslRead, l_str_SQLSentence) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
            }
          }
          else
          {
            file_RunData.AddField(i_str_ColumnName, i_keyNewValue, hslInteger);
            if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + i_str_SheetName, hslRead, l_str_SQLSentence) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != file_RunData.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file_RunData.RemoveFields();
        l_bln_errorUpdating = ASWGLOBAL::BOOL::FALSE;
        errLabel_2 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          l_bln_errorUpdating = ASWGLOBAL::BOOL::TRUE;
          if( 0 == l_timer_errorUpdating.SetTimer(2) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_timer_errorUpdating.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }   /* end if from skip handler if no error */
        if (loopCounter1 == 2)
        {
          if (l_bln_errorUpdating == ASWGLOBAL::BOOL::TRUE)
          {
            TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::ERROR, t_str_FunctionName, t_strLibraryName, t_str_Comment);
            DisplayDialog_Error(Translate("Cannot access to RunData File to Update Data. Restart Protocol"), Translate(""), 15, Translate(""), 0);
          }
        }
      }
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return;
  }

  private function _Reset_FileRunData_Variables(  ) void {
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    file_RunData_DB_DeadVolumeLabware = 0;
    file_RunData_DB_DeadVolumePercent = 0;
    file_RunData_DB_TotalVolume = 0;
    file_RunData_DB_VolumePerWell = 0;
    file_RunData_DB_VolumePerWell = 0;
    file_RunData_DB_Ratio = 0;
    file_RunData_DB_NumberOfSamples = 0;
    file_RunData_DB_CarrierName = Translate("");
    file_RunData_DB_LabwareName = Translate("");
    file_RunData_DB_LabwareDescription = Translate("");
    file_RunData_DB_SequenceName = Translate("");
    file_RunData_DB_ContainerDescription = Translate("");
    file_RunData_DB_ContainerViewName = Translate("");
    file_RunData_DB_PositionID = Translate("");
    file_RunData_DB_Type = Translate("");
    file_RunData_DB_MasterMixComponentName = Translate("");
    file_RunData_DB_Name = Translate("");
    file_RunData_DB_Description = Translate("");
    file_RunData_DB_SiteID = Translate("");
    file_RunData_DB_Units = 0;
    file_RunData_DB_TrackNumber = 0;
    file_RunData_DB_MastermixName = Translate("");
    file_RunData_DB_MastermixPreparedOnDeck = 0;
    file_RunData_DB_LabwareFileName = Translate("");
    file_RunData_DB_TotalDeadVolume = 0.0;
    file_RunData_DB_AddToDialog = 0;
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return;
  }

  private function _FileOpenRunData( variable i_str_SQL, variable i_FileOpenMode ) void {
    private variable l_str_TableName;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    if (i_FileOpenMode == 1)
    {
      l_str_TableName = Translate("RunData$");
      file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
      file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
      file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
      file_RunData.AddField("DB_TotalDeadVolume", file_RunData_DB_TotalDeadVolume, hslFloat);
      file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
      file_RunData.AddField("DB_ExtraVolume", file_RunData_DB_ExtraVolume, hslFloat);
      file_RunData.AddField("DB_NumberOfSamples", file_RunData_DB_NumberOfSamples, hslInteger);
      file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
      file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
      file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
      file_RunData.AddField("DB_TrackNumber", file_RunData_DB_TrackNumber, hslInteger);
      file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
      file_RunData.AddField("DB_LabwareDescription", file_RunData_DB_LabwareDescription, hslString, 255);
      file_RunData.AddField("DB_LabwareFileName", file_RunData_DB_LabwareFileName, hslString, 255);
      file_RunData.AddField("DB_SequenceName", file_RunData_DB_SequenceName, hslString, 255);
      file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
      file_RunData.AddField("DB_ContainerViewName", file_RunData_DB_ContainerViewName, hslString, 255);
      file_RunData.AddField("DB_ContainerDescription", file_RunData_DB_ContainerDescription, hslString, 255);
      file_RunData.AddField("DB_Name", file_RunData_DB_Name, hslString, 255);
      file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
      file_RunData.AddField("DB_MastermixName", file_RunData_DB_MastermixName, hslString, 255);
      file_RunData.AddField("DB_MastermixPreparedOnDeck", file_RunData_DB_MastermixPreparedOnDeck, hslInteger);
      file_RunData.AddField("DB_Type", file_RunData_DB_Type, hslString, 255);
      file_RunData.AddField("DB_Ratio", file_RunData_DB_Ratio, hslFloat);
      file_RunData.AddField("DB_Description", file_RunData_DB_Description, hslString, 255);
      file_RunData.AddField("DB_AddToDialog", file_RunData_DB_AddToDialog, hslInteger);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + l_str_TableName, hslRead, i_str_SQL) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
    }
    if (i_FileOpenMode == 2)
    {
      l_str_TableName = Translate("RunData$");
      file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
      file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
      file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
      file_RunData.AddField("DB_TotalDeadVolume", file_RunData_DB_TotalDeadVolume, hslFloat);
      file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
      file_RunData.AddField("DB_ExtraVolume", file_RunData_DB_ExtraVolume, hslFloat);
      file_RunData.AddField("DB_NumberOfSamples", file_RunData_DB_NumberOfSamples, hslInteger);
      file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
      file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
      file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
      file_RunData.AddField("DB_TrackNumber", file_RunData_DB_TrackNumber, hslInteger);
      file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
      file_RunData.AddField("DB_LabwareDescription", file_RunData_DB_LabwareDescription, hslString, 255);
      file_RunData.AddField("DB_LabwareFileName", file_RunData_DB_LabwareFileName, hslString, 255);
      file_RunData.AddField("DB_SequenceName", file_RunData_DB_SequenceName, hslString, 255);
      file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
      file_RunData.AddField("DB_ContainerViewName", file_RunData_DB_ContainerViewName, hslString, 255);
      file_RunData.AddField("DB_ContainerDescription", file_RunData_DB_ContainerDescription, hslString, 255);
      file_RunData.AddField("DB_Name", file_RunData_DB_Name, hslString, 255);
      file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
      file_RunData.AddField("DB_MastermixName", file_RunData_DB_MastermixName, hslString, 255);
      file_RunData.AddField("DB_MastermixPreparedOnDeck", file_RunData_DB_MastermixPreparedOnDeck, hslInteger);
      file_RunData.AddField("DB_Type", file_RunData_DB_Type, hslString, 255);
      file_RunData.AddField("DB_Ratio", file_RunData_DB_Ratio, hslFloat);
      file_RunData.AddField("DB_Description", file_RunData_DB_Description, hslString, 255);
      file_RunData.AddField("DB_AddToDialog", file_RunData_DB_AddToDialog, hslInteger);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + l_str_TableName, hslAppend, i_str_SQL) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
    }
    if (i_FileOpenMode == 3)
    {
      l_str_TableName = Translate("RunData");
      file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
      file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
      file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
      file_RunData.AddField("DB_TotalDeadVolume", file_RunData_DB_TotalDeadVolume, hslFloat);
      file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
      file_RunData.AddField("DB_ExtraVolume", file_RunData_DB_ExtraVolume, hslFloat);
      file_RunData.AddField("DB_NumberOfSamples", file_RunData_DB_NumberOfSamples, hslInteger);
      file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
      file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
      file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
      file_RunData.AddField("DB_TrackNumber", file_RunData_DB_TrackNumber, hslInteger);
      file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
      file_RunData.AddField("DB_LabwareDescription", file_RunData_DB_LabwareDescription, hslString, 255);
      file_RunData.AddField("DB_LabwareFileName", file_RunData_DB_LabwareFileName, hslString, 255);
      file_RunData.AddField("DB_SequenceName", file_RunData_DB_SequenceName, hslString, 255);
      file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
      file_RunData.AddField("DB_ContainerViewName", file_RunData_DB_ContainerViewName, hslString, 255);
      file_RunData.AddField("DB_ContainerDescription", file_RunData_DB_ContainerDescription, hslString, 255);
      file_RunData.AddField("DB_Name", file_RunData_DB_Name, hslString, 255);
      file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
      file_RunData.AddField("DB_MastermixName", file_RunData_DB_MastermixName, hslString, 255);
      file_RunData.AddField("DB_MastermixPreparedOnDeck", file_RunData_DB_MastermixPreparedOnDeck, hslInteger);
      file_RunData.AddField("DB_Type", file_RunData_DB_Type, hslString, 255);
      file_RunData.AddField("DB_Ratio", file_RunData_DB_Ratio, hslFloat);
      file_RunData.AddField("DB_Description", file_RunData_DB_Description, hslString, 255);
      file_RunData.AddField("DB_AddToDialog", file_RunData_DB_AddToDialog, hslInteger);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + l_str_TableName, hslWrite, i_str_SQL) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return;
  }

  private function _ConvertValueToString( variable i_value, variable & o_str_ConvertedValue ) void {
    private variable l_str_ValueType;
    o_str_ConvertedValue = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    l_str_ValueType = StrGetType(i_value);
    if (l_str_ValueType == "i")
    {
      o_str_ConvertedValue = StrIStr(i_value);
    }
    if (l_str_ValueType == "f")
    {
      o_str_ConvertedValue = StrFStr(i_value);
    }
    if (l_str_ValueType == "s")
    {
      o_str_ConvertedValue = i_value;
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return;
  }

  private function _GetCarrierAndSiteID( device & Instrument, variable i_str_LabwareID, variable & o_str_TemplateID, variable & o_str_TemplateSiteID, variable & o_int_TrackNumber ) void {
    private variable var_return;
    private variable l_site_ID;
    private variable l_carrier_ID;
    private variable l_labware_ID;
    private variable l_fltZCoord;
    private variable l_fltYCoord;
    private variable l_fltXCoord;
    private variable l_fltAngleCoord;
    private variable l_str_FunctionName;
    private variable l_intLengthStrSiteID;
    private variable l_intFindSubStr;
    private variable l_intNumberOfCharacters;
    private variable l_strTrack;
    o_str_TemplateID = 0;
    o_str_TemplateSiteID = 0;
    o_int_TrackNumber = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_str_LabwareID, Translate("i_str_LabwareID"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    l_labware_ID = i_str_LabwareID;
    o_str_TemplateID = Translate("");
    o_str_TemplateSiteID = Translate("");
    var_return = 0;
    l_site_ID = Translate("");
    l_carrier_ID = Translate("");
    HSLLabwrAccess::SetTraceLevel(TRACE_LEVEL_NONE);
    HSLLabwrAccess::GetTemplateIDAndTemplateSiteID(Instrument, i_str_LabwareID, l_carrier_ID, l_site_ID);
    o_str_TemplateSiteID = l_site_ID;
    if (l_carrier_ID == "default")
    {
      o_str_TemplateID = i_str_LabwareID;
    }
    else
    {
      o_str_TemplateID = l_carrier_ID;
    }
    l_intFindSubStr = StrFind(l_site_ID, Translate("T-"));
    if (l_intFindSubStr > -1)
    {
      l_intLengthStrSiteID = StrGetLength(l_site_ID);
      l_intNumberOfCharacters = l_intLengthStrSiteID - 3;
      l_strTrack = StrRight(l_site_ID, l_intNumberOfCharacters);
      o_int_TrackNumber = StrIVal(l_strTrack);
    }
    else
    {
      DevGetLabwarePosition(Instrument, o_str_TemplateID, l_fltXCoord, l_fltYCoord, l_fltZCoord, l_fltAngleCoord);
      o_int_TrackNumber = l_fltXCoord / (22.5 * 1.0);
      o_int_TrackNumber = MthFloor(o_int_TrackNumber);
      if (t_int_SystemConnected == 0)
      {
        o_int_TrackNumber = o_int_TrackNumber - 3;
      }
    }
    if (o_int_TrackNumber < 0)
    {
      o_int_TrackNumber = o_int_TrackNumber - 1;
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return;
  }

  private function _UpdateLabwareDataInFile( variable & i_arr_Values[], variable i_str_ColumnName, variable i_keyValueReference, variable i_str_ColumnReference ) void {
    private variable l_str_arrayData;
    private variable l_str_SQLSentence;
    private variable loopCounter1;
    private variable l_int_SizeArray;
    private variable l_arr_DistinctValues[];
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    ARRAYTOOLS::get_distinct_from_array(i_arr_Values, l_arr_DistinctValues);
    l_int_SizeArray=l_arr_DistinctValues.GetSize();
    l_str_SQLSentence = Translate("");
    l_str_arrayData = Translate("");
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_SizeArray;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 == 1)
        {
          l_str_arrayData = StrConcat12(l_str_arrayData, Translate(""), l_arr_DistinctValues.ElementAt( loopCounter1 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        else
        {
          l_str_arrayData = StrConcat12(l_str_arrayData, Translate(","), l_arr_DistinctValues.ElementAt( loopCounter1 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
      }
    }
    l_str_SQLSentence=StrConcat12("UPDATE [RunData$] SET [",i_str_ColumnName,"] ='",l_str_arrayData,"' WHERE [",i_str_ColumnReference,"] = '",i_keyValueReference,"'","","","");
    Trace(l_str_SQLSentence);
    _FileOpenRunData(l_str_SQLSentence, 1);
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return;
  }

  private function _Calculate_TotalVolume_MastermixComponent( variable i_str_MastermixName, variable i_str_MastermixComponentName, variable i_flt_MastermixVolume, variable i_flt_MastermixTotalVolume, variable i_flt_MastermixComponentVolume, variable & o_flt_MastermixComponentTotalVolume, variable & o_flt_Ratio ) void {
    private variable l_flt_Ratio;
    private variable l_flt_MastermixComponentTotalVolume;
    private variable l_str_FunctionName;
    o_flt_MastermixComponentTotalVolume = 0;
    o_flt_Ratio = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_flt_MastermixComponentVolume, Translate("i_flt_MastermixComponentVolume"), Translate("if"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_flt_MastermixTotalVolume, Translate("i_flt_MastermixTotalVolume"), Translate("if"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_flt_MastermixVolume, Translate("i_flt_MastermixVolume"), Translate("if"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_str_MastermixComponentName, Translate("i_str_MastermixComponentName"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_str_MastermixName, Translate("i_str_MastermixName"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    l_flt_MastermixComponentTotalVolume = 0.0;
    l_flt_Ratio = 0.0;
    TrcTrace("------- Calculate Volume for the next Mastermix Component ",i_str_MastermixComponentName);
    TrcTrace("----------------------------------Component of Mastermix: ",i_str_MastermixName);
    TrcTrace("---------------------------------- i_flt_MastermixComponentVolume: ",i_flt_MastermixComponentVolume);
    TrcTrace("---------------------------------- i_flt_MastermixTotalVolume: ",i_flt_MastermixTotalVolume);
    TrcTrace("---------------------------------- i_flt_MastermixVolume: ",i_flt_MastermixVolume);
    l_flt_MastermixComponentTotalVolume = (i_flt_MastermixComponentVolume * i_flt_MastermixTotalVolume)/i_flt_MastermixVolume;
    TrcTrace("Volume calculated (ul): ", l_flt_MastermixComponentTotalVolume);
    l_flt_Ratio = (i_flt_MastermixComponentVolume / i_flt_MastermixVolume);
    TrcTrace("Ratio: ", l_flt_Ratio);
    o_flt_MastermixComponentTotalVolume = l_flt_MastermixComponentTotalVolume;
    o_flt_Ratio = l_flt_Ratio;
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
  }

  function CalculateTotalVolumeAndSequenceToAspirate( variable i_strLiquidName, variable i_intNumberOfSamples, variable i_fltDeadVolumeLabware, variable i_fltDeadVolumeLiquid, variable i_fltMaximumVolumePerContainer, variable i_intMinimumNumberOfContainers, sequence & i_seqTemplate, variable i_intStartingPositionInSeqTemplate, sequence & o_seqToAspirate, variable & o_arr_fltVolumePerContainer[], device & ML_STAR, variable i_bln_ShowDataInLoadingDialog ) variable {
    private variable l_strLiquidType;
    private variable l_intNumberOfContainers;
    private variable l_str_FunctionName;
    private variable l_fltTotalVolumeNeeded;
    private variable loopCounter1;
    private variable l_str_SQLSentence;
    private variable l_strType_MastermixComponent;
    private variable l_fltTotalVolumePerSamplePlusExtra;
    private variable l_fltMastermixComponent_TotalVolume;
    private variable l_intNumberOfMastermixComponents;
    private variable loopCounter2;
    private variable l_strDescription;
    private variable l_arr_fltTotalVolumeRequiredForThisLiquid[];
    private variable l_strErrorMessage;
    private variable l_str_CarrierID;
    private variable l_strLabwareID_SeqTemplate;
    private variable l_int_TrackNumber;
    private variable l_str_SiteID;
    private variable l_intReturnSearchStr;
    private variable l_str_FilePathConfigFile;
    private variable l_str_LabwareType;
    private variable l_fltMastermixComponent_Ratio;
    private variable l_arr_fltMastermixComponentTotalVolumes[];
    private variable l_arr_fltMastermixComponentRatios[];
    private variable l_arr_strMastermixComponentNames[];
    private variable l_str_NewMastermixOnDeck_Description;
    private variable l_str_LabwareViewName;
    private variable l_str_LabwareDescription;
    private variable l_int_remainingPositionsInSequence;
    private variable l_str_SequenceName;
    { sequence __temp; o_seqToAspirate = __temp; }
    o_arr_fltVolumePerContainer.SetSize( 0);
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_strLiquidName, Translate("i_strLiquidName"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_intNumberOfSamples, Translate("i_intNumberOfSamples"), Translate("i"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_fltDeadVolumeLabware, Translate("i_fltDeadVolumeLabware"), Translate("if"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_fltDeadVolumeLiquid, Translate("i_fltDeadVolumeLiquid"), Translate("if"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_fltMaximumVolumePerContainer, Translate("i_fltMaximumVolumePerContainer"), Translate("if"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_intMinimumNumberOfContainers, Translate("i_intMinimumNumberOfContainers"), Translate("i"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_intStartingPositionInSeqTemplate, Translate("i_intStartingPositionInSeqTemplate"), Translate("i"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_bln_ShowDataInLoadingDialog, Translate("i_bln_ShowDataInLoadingDialog"), Translate("i"), ASWGLOBAL::BOOL::FALSE);
    _Reset_FileRunData_Variables();
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("i_strLiquidName: "), i_strLiquidName);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("i_intNumberOfSamples: "), i_intNumberOfSamples);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("i_fltDeadVolumeLabware: "), i_fltDeadVolumeLabware);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("i_fltDeadVolumeLiquid: "), i_fltDeadVolumeLiquid);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("i_fltMaximumVolumePerContainer: "), i_fltMaximumVolumePerContainer);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("i_intMinimumNumberOfContainers: "), i_intMinimumNumberOfContainers);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("i_intStartingPositionInSeqTemplate: "), i_intStartingPositionInSeqTemplate);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("i_bln_ShowDataInLoadingDialog: "), i_bln_ShowDataInLoadingDialog);
    l_strLiquidType = Translate("");
    l_strType_MastermixComponent = Translate("");
    l_strDescription = Translate("");
    l_str_SQLSentence = Translate("");
    l_fltMastermixComponent_Ratio = 0.0;
    l_fltMastermixComponent_TotalVolume = 0.0;
    l_fltTotalVolumeNeeded = 0.0;
    l_fltTotalVolumePerSamplePlusExtra = 0.0;
    l_intNumberOfContainers = 0;
    l_intNumberOfMastermixComponents = 0;
    _FindLiquidIndDB(i_strLiquidName, l_strLiquidType);
    TRACELEVEL::Trace_06(t_intGetTraceLevel, Translate("i_strLiquidName: "), i_strLiquidName, Translate(" is "), l_strLiquidType, Translate(""), Translate(""));
    if (l_strLiquidType == t_strType_MastermixComponent)
    {
      l_str_NewMastermixOnDeck_Description = Translate("Empty");
      _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_Description"), l_str_NewMastermixOnDeck_Description, Translate("DB_Name"), file_RunData_DB_MastermixName);
      _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_MastermixPreparedOnDeck"), ASWGLOBAL::BOOL::TRUE, Translate("DB_Name"), file_RunData_DB_MastermixName);
    }
    _Calculate_TotalVolumeRequiredForThisLiquidFromFile(i_strLiquidName, l_strLiquidType, l_fltTotalVolumePerSamplePlusExtra, l_arr_fltTotalVolumeRequiredForThisLiquid);
    if (l_strLiquidType != "NotFound")
    {
      file_RunData_DB_AddToDialog = i_bln_ShowDataInLoadingDialog;
      if (l_strLiquidType != t_strType_MastermixComponent)
      {
        _Calculate_NumberOfContainersAndVolumePerContainer_BySampleNumber(i_strLiquidName, i_intNumberOfSamples, l_fltTotalVolumePerSamplePlusExtra, i_fltDeadVolumeLabware, i_fltDeadVolumeLiquid, i_fltMaximumVolumePerContainer, i_intMinimumNumberOfContainers, l_intNumberOfContainers, o_arr_fltVolumePerContainer, l_fltTotalVolumeNeeded);
      }
      else
      {
        _Calculate_NumberOfContainersAndVolumePerContainer_ByTotalVolume(i_strLiquidName, file_RunData_DB_TotalVolume, i_fltDeadVolumeLabware, i_fltDeadVolumeLiquid, i_fltMaximumVolumePerContainer, i_intMinimumNumberOfContainers, l_intNumberOfContainers, o_arr_fltVolumePerContainer, l_fltTotalVolumeNeeded);
      }
      TRACELEVEL::TraceSequence(t_intGetTraceLevel, i_seqTemplate);
      l_strLabwareID_SeqTemplate = SeqGetLabwareId(i_seqTemplate);
      if ( i_seqTemplate.GetCurrentPosition() == 0 ) l_int_remainingPositionsInSequence = 0;
      else l_int_remainingPositionsInSequence = i_seqTemplate.GetCount() - i_seqTemplate.GetCurrentPosition() + 1;
      l_str_SequenceName = SeqGetName(i_seqTemplate);
      if (l_int_remainingPositionsInSequence == 0)
      {
        l_strErrorMessage = StrConcat12(Translate("Sequence: "), l_str_SequenceName, Translate(" does not have more positions. Please add more containers to the sequence or choose a different template sequence in your code"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        DisplayDialog_Error(l_strErrorMessage, Translate(""), 10, Translate(""), 0);
      }
      _GetCarrierAndSiteID(ML_STAR, l_strLabwareID_SeqTemplate, l_str_CarrierID, l_str_SiteID, l_int_TrackNumber);
      l_intReturnSearchStr = StrFind(l_str_SiteID, Translate("T-"));
      if (l_intReturnSearchStr >= 0)
      {
        LPQ::CONT_GetConfigFile(ML_STAR, i_seqTemplate, l_str_FilePathConfigFile);
      }
      else
      {
        LPQ::LABWARE_GetConfigFile(ML_STAR, i_seqTemplate, l_str_FilePathConfigFile);
      }
      LPQ::FILE_GetDefinitionFileValue(l_str_FilePathConfigFile, Translate("Description"), l_str_LabwareDescription);
      l_str_LabwareType = HSLExtensions::File::GetFileNameWithoutExtension(l_str_FilePathConfigFile);
      LPQ::FILE_GetDefinitionFileValue(l_str_FilePathConfigFile, Translate("ViewName"), l_str_LabwareViewName);
      if (l_str_LabwareViewName == "")
      {
        l_str_LabwareViewName = l_str_LabwareType;
      }
      _Calculate_SequenceToAspirate(i_strLiquidName, l_intNumberOfContainers, l_str_LabwareType, l_str_LabwareViewName, l_str_LabwareDescription, i_seqTemplate, i_intStartingPositionInSeqTemplate, o_seqToAspirate, ML_STAR);
      if (t_blnLiquidIsMastermix == ASWGLOBAL::BOOL::TRUE)
      {
        t_arr_strMastermixNames.SetSize(0);
        t_arr_strMastermixComponentNames.SetSize(0);
        l_arr_strMastermixComponentNames.SetSize(0);
        l_arr_fltMastermixComponentRatios.SetSize(0);
        l_arr_fltMastermixComponentTotalVolumes.SetSize(0);
        l_strType_MastermixComponent = t_strType_MastermixComponent;
        l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_MasterMixName] = '",i_strLiquidName,"' AND [DB_Type] = '",l_strType_MastermixComponent,"'","","","","","","","");
        Trace(l_str_SQLSentence);
        _FileOpenRunData(l_str_SQLSentence, 1);
        {
          loopCounter1 = 0;
          while (
             (file_RunData.Eof() == 0)
          )
          {
            loopCounter1 = loopCounter1 + 1;
            if( 0 == file_RunData.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            _Trace_FileRunDataVariables();
            _Calculate_TotalVolume_MastermixComponent(i_strLiquidName, file_RunData_DB_MasterMixComponentName, l_fltTotalVolumePerSamplePlusExtra, l_fltTotalVolumeNeeded, file_RunData_DB_VolumePerWell, l_fltMastermixComponent_TotalVolume, l_fltMastermixComponent_Ratio);
            t_arr_strMastermixNames.AddAsLast(i_strLiquidName);
            l_arr_strMastermixComponentNames.AddAsLast(file_RunData_DB_Name);
            l_arr_fltMastermixComponentRatios.AddAsLast(l_fltMastermixComponent_Ratio);
            l_arr_fltMastermixComponentTotalVolumes.AddAsLast(l_fltMastermixComponent_TotalVolume);
          }
        }
        if( 0 != file_RunData.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file_RunData.RemoveFields();
        l_intNumberOfMastermixComponents=l_arr_strMastermixComponentNames.GetSize();
        {
          for(loopCounter2 = 0; loopCounter2 < l_intNumberOfMastermixComponents;)
          {
            loopCounter2 = loopCounter2 + 1;
            _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_Ratio"), l_arr_fltMastermixComponentRatios.ElementAt( loopCounter2 -1), Translate("DB_Name"), l_arr_strMastermixComponentNames.ElementAt( loopCounter2 -1));
            _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_TotalVolume"), l_arr_fltMastermixComponentTotalVolumes.ElementAt( loopCounter2 -1), Translate("DB_Name"), l_arr_strMastermixComponentNames.ElementAt( loopCounter2 -1));
            _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_Description"), Translate(" -- "), Translate("DB_Name"), l_arr_strMastermixComponentNames.ElementAt( loopCounter2 -1));
            _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_NumberOfSamples"), l_intNumberOfContainers, Translate("DB_Name"), l_arr_strMastermixComponentNames.ElementAt( loopCounter2 -1));
            t_arr_strQtyLabwareTypeVolume.AddAsLast(Translate(" -- "));
          }
        }
      }
      _DescriptionForDialog(l_intNumberOfContainers, l_str_LabwareDescription, o_arr_fltVolumePerContainer, l_strDescription);
      t_arr_strQtyLabwareTypeVolume.AddAsLast(l_strDescription);
      _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_Description"), l_strDescription, Translate("DB_Name"), i_strLiquidName);
      _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_AddToDialog"), i_bln_ShowDataInLoadingDialog, Translate("DB_Name"), i_strLiquidName);
    }
    else
    {
      Trace(i_strLiquidName, " not found in RunData");
      l_strErrorMessage = StrConcat12(Translate(""), i_strLiquidName, Translate(" has not been defined in RunData file. Cannot calculate total volume and sequence to aspirate for this liquid"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      TRACELEVEL::Trace_04(t_intGetTraceLevel, l_strErrorMessage, Translate(""), Translate(""), Translate(""));
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _Calculate_SequenceToAspirate( variable i_strReagentName, variable i_intNumberOfContainers, variable i_strLabwareType, variable i_strLabwareViewName, variable i_strLabwareDescription, sequence & i_seqTemplate, variable i_intStartingPoint, sequence & o_seqAspirate, device & ML_STAR ) void {
    private variable l_intCurrentPosition;
    private variable l_strTempPositionRGT;
    private variable l_intNumberOfLabwareIds_Distinct;
    private variable l_intAvailablePositions;
    private variable l_intEndPosition;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable l_strTempPositionContainer;
    private variable l_intReturnSearch_RGT;
    private variable l_arr_strLabwareIdsSequenceTemplate_Distinct[];
    private variable l_arr_strLabwareIdsSequenceTemplate[];
    private variable l_str_FunctionName;
    private variable l_strMessage;
    private variable l_intIndexLabwareIds;
    private variable l_strLabwareIDs;
    private variable l_strLabwareId;
    private variable l_strTemplateID;
    private variable l_strSiteID;
    private variable l_intTempPositionContainer;
    private variable l_arr_strSiteIds_distinct[];
    private variable l_arr_strTemplateIds_distinct[];
    private variable loopCounter3;
    private variable l_strTemplateIDs;
    private variable l_strPositionIDs;
    private variable l_strSiteIDs;
    private variable l_arr_strPositionIds_distinct[];
    private variable l_arr_strPositionIds[];
    private variable l_arr_strTemplateIds[];
    private variable l_arr_strSiteIds[];
    private variable l_int_TrackNumber;
    private variable l_str_FilePathConfigFile;
    private variable l_str_LabwareDescription;
    private sequence l_seqDefaultSequence;
    private variable i_intNumberOfPositionsToAspirate;
    private variable l_str_SequenceName;
    private variable l_arr_strNamesActivateVisibility[];
    private variable l_strLabwareNamesActivateVisibility;
    private variable l_arr_strNamesActivateVisibility_distinct[];
    private variable l_str_ContainerDescription;
    private variable l_str_ContainerViewName;
    private variable l_int_dummyTrackNumber;
    private variable l_str_dummyTemplateID;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("i_intNumberOfContainers: "), i_intNumberOfContainers);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("i_intStartingPoint: "), i_intStartingPoint);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("i_strLabwareType: "), i_strLabwareType);
    l_arr_strTemplateIds_distinct.SetSize(0);
    l_arr_strSiteIds_distinct.SetSize(0);
    l_arr_strLabwareIdsSequenceTemplate.SetSize(0);
    l_arr_strNamesActivateVisibility.SetSize(0);
    l_arr_strLabwareIdsSequenceTemplate_Distinct.SetSize(0);
    l_strLabwareId = Translate("");
    l_strLabwareId = Translate("");
    l_strSiteID = Translate("");
    l_strTemplateID = Translate("");
    l_int_TrackNumber = 0;
    SeqRemoveAll(o_seqAspirate);
    SeqGetLabwareIds(i_seqTemplate, l_arr_strLabwareIdsSequenceTemplate);
    l_str_SequenceName = SeqGetName(i_seqTemplate);
    ARRAYTOOLS::get_distinct_from_array(l_arr_strLabwareIdsSequenceTemplate, l_arr_strLabwareIdsSequenceTemplate_Distinct);
    l_intNumberOfLabwareIds_Distinct=l_arr_strLabwareIdsSequenceTemplate_Distinct.GetSize();
    if (i_intStartingPoint != 0)
    {
      i_seqTemplate.SetCurrentPosition(i_intStartingPoint);
    }
    l_intCurrentPosition = i_seqTemplate.GetCurrentPosition();
    l_intEndPosition = i_seqTemplate.GetCount();
    l_intAvailablePositions = l_intEndPosition - l_intCurrentPosition;
    l_intAvailablePositions = l_intAvailablePositions + 1;
    if (l_intAvailablePositions < i_intNumberOfContainers)
    {
      l_strMessage = StrConcat12(Translate("Function: "), l_str_FunctionName, Translate("\nError: Not enough available positions in template sequence to build sequence to aspirate"), Translate("\nNumber of containers required: "), i_intNumberOfContainers, Translate("\nNumber of available positions in sequence: "), l_intAvailablePositions, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      DisplayDialog_Error(l_strMessage, Translate(""), 0, Translate(""), 0);
    }
    else
    {
      l_intReturnSearch_RGT = StrFind(l_arr_strLabwareIdsSequenceTemplate_Distinct.ElementAt( 1 -1), Translate("RGT"));
      if (l_intReturnSearch_RGT == -1)
      {
        l_intReturnSearch_RGT = StrFind(l_arr_strLabwareIdsSequenceTemplate_Distinct.ElementAt( 1 -1), Translate("rgt"));
        if (l_intReturnSearch_RGT == -1)
        {
          l_intReturnSearch_RGT = StrFind(l_arr_strLabwareIdsSequenceTemplate_Distinct.ElementAt( 1 -1), Translate("Rgt"));
        }
      }
      if (l_intReturnSearch_RGT >= 0)
      {
        {
          for(loopCounter1 = 0; loopCounter1 < i_intNumberOfContainers;)
          {
            loopCounter1 = loopCounter1 + 1;
            l_intCurrentPosition = i_seqTemplate.GetCurrentPosition();
            LPQ::SEQ_GetDefaultSequence(ML_STAR, l_arr_strLabwareIdsSequenceTemplate_Distinct.ElementAt( l_intCurrentPosition -1), ASWGLOBAL::BOOL::TRUE, l_seqDefaultSequence);
            i_intNumberOfPositionsToAspirate = SeqGetTotal(l_seqDefaultSequence);
            l_seqDefaultSequence.SetCurrentPosition(1);
            {
              for(loopCounter2 = 0; loopCounter2 < i_intNumberOfPositionsToAspirate;)
              {
                loopCounter2 = loopCounter2 + 1;
                l_strLabwareId = SeqGetLabwareId(l_seqDefaultSequence);
                l_arr_strNamesActivateVisibility.AddAsLast(l_strLabwareId);
                l_strTempPositionRGT = SeqGetPositionId(l_seqDefaultSequence);
                SeqAdd(o_seqAspirate, l_strLabwareId, l_strTempPositionRGT);
                SeqIncrement(l_seqDefaultSequence, 1);
              }
            }
            _GetCarrierAndSiteID(ML_STAR, l_arr_strLabwareIdsSequenceTemplate_Distinct.ElementAt( l_intCurrentPosition -1), l_str_dummyTemplateID, l_strTempPositionContainer, l_int_dummyTrackNumber);
            l_strTempPositionContainer = StrIVal(l_strTempPositionContainer);
            SeqIncrement(i_seqTemplate, 1);
            t_arr_strPositionIds.AddAsLast(l_strTempPositionContainer);
            t_arr_strLabwareIds.AddAsLast(l_strLabwareId);
            _GetCarrierAndSiteID(ML_STAR, l_strLabwareId, l_strTemplateID, l_strSiteID, l_int_TrackNumber);
            t_arr_strTemplateIds.AddAsLast(l_strTemplateID);
            t_arr_strTemplateIds_ForLiquidsOnly.AddAsLast(l_strTemplateID);
            t_arr_strSiteIds.AddAsLast(l_strSiteID);
          }
        }
      }
      else
      {
        l_intIndexLabwareIds = i_intStartingPoint;
        l_intIndexLabwareIds = l_intIndexLabwareIds - 1;
        {
          for(loopCounter1 = 0; loopCounter1 < i_intNumberOfContainers;)
          {
            loopCounter1 = loopCounter1 + 1;
            l_strTempPositionContainer = SeqGetPositionId(i_seqTemplate);
            if (l_intNumberOfLabwareIds_Distinct > 1)
            {
              l_intIndexLabwareIds = l_intIndexLabwareIds + 1;
              l_strLabwareId = l_arr_strLabwareIdsSequenceTemplate.ElementAt( l_intIndexLabwareIds -1);
              l_strTempPositionContainer = StrRight(l_arr_strLabwareIdsSequenceTemplate.ElementAt( l_intIndexLabwareIds -1), 2);
              l_intTempPositionContainer = StrIVal(l_strTempPositionContainer);
              SeqAdd(o_seqAspirate, l_strLabwareId, l_strTempPositionContainer);
              l_strTempPositionContainer = StrIStr(l_intTempPositionContainer);
            }
            else
            {
              l_strLabwareId = l_arr_strLabwareIdsSequenceTemplate.ElementAt( 1 -1);
              SeqAdd(o_seqAspirate, l_strLabwareId, l_strTempPositionContainer);
            }
            l_arr_strNamesActivateVisibility.AddAsLast(l_strLabwareId);
            t_arr_str_Labware_FilePath.AddAsLast(l_str_FilePathConfigFile);
            LPQ::LABWARE_GetDescription(ML_STAR, i_seqTemplate, l_str_LabwareDescription);
            t_arr_str_Labware_Description.AddAsLast(l_str_LabwareDescription);
            SeqIncrement(i_seqTemplate, 1);
            t_arr_strPositionIds.AddAsLast(l_strTempPositionContainer);
            t_arr_strLabwareIds.AddAsLast(l_strLabwareId);
            _GetCarrierAndSiteID(ML_STAR, l_strLabwareId, l_strTemplateID, l_strSiteID, l_int_TrackNumber);
            t_arr_strTemplateIds.AddAsLast(l_strTemplateID);
            t_arr_strTemplateIds_ForLiquidsOnly.AddAsLast(l_strTemplateID);
            t_arr_strSiteIds.AddAsLast(l_strSiteID);
          }
        }
      }
      {
        for(loopCounter3 = 0; loopCounter3 < i_intNumberOfContainers;)
        {
          loopCounter3 = loopCounter3 + 1;
          t_arr_strReagentName.AddAsLast(i_strReagentName);
          t_arr_strLabwareType.AddAsLast(i_strLabwareType);
          t_arr_strLabwareViewName.AddAsLast(i_strLabwareViewName);
          t_arr_strLabwareDescription.AddAsLast(i_strLabwareDescription);
        }
      }
      ARRAYTOOLS::ArrayVLookUp(t_arr_strPositionIds, t_arr_strReagentName, i_strReagentName, l_arr_strPositionIds);
      ARRAYTOOLS::ArrayVLookUp(t_arr_strSiteIds, t_arr_strReagentName, i_strReagentName, l_arr_strSiteIds);
      if(0){
        ARRAYTOOLS::ArrayVLookUp(t_arr_strTemplateIds, t_arr_strReagentName, i_strReagentName, l_arr_strTemplateIds);
      }
      ARRAYTOOLS::ArrayVLookUp(t_arr_strTemplateIds_ForLiquidsOnly, t_arr_strReagentName, i_strReagentName, l_arr_strTemplateIds);
      ARRAYTOOLS::get_distinct_from_array(l_arr_strPositionIds, l_arr_strPositionIds_distinct);
      ARRAYTOOLS::get_distinct_from_array(l_arr_strSiteIds, l_arr_strSiteIds_distinct);
      ARRAYTOOLS::get_distinct_from_array(l_arr_strTemplateIds, l_arr_strTemplateIds_distinct);
      ARRAYTOOLS::ConcatenateAllElementsInArray(l_arr_strPositionIds_distinct, l_strPositionIDs);
      ARRAYTOOLS::ConcatenateAllElementsInArray(l_arr_strSiteIds_distinct, l_strSiteIDs);
      ARRAYTOOLS::ConcatenateAllElementsInArray(l_arr_strTemplateIds_distinct, l_strTemplateIDs);
      o_seqAspirate.SetCurrentPosition(1);
      LPQ::CONT_GetDescription(ML_STAR, o_seqAspirate, 1, l_str_ContainerDescription);
      LPQ::CONT_GetViewName(ML_STAR, o_seqAspirate, 1, l_str_ContainerViewName);
      TRACELEVEL::TraceSequence(t_intGetTraceLevel, o_seqAspirate);
      l_str_SequenceName = SeqGetName(o_seqAspirate);
      _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_Units"), i_intNumberOfContainers, Translate("DB_Name"), i_strReagentName);
      _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_LabwareFileName"), i_strLabwareType, Translate("DB_Name"), i_strReagentName);
      _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_LabwareName"), i_strLabwareViewName, Translate("DB_Name"), i_strReagentName);
      _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_LabwareDescription"), i_strLabwareDescription, Translate("DB_Name"), i_strReagentName);
      _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_ContainerDescription"), l_str_ContainerDescription, Translate("DB_Name"), i_strReagentName);
      _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_ContainerViewName"), l_str_ContainerViewName, Translate("DB_Name"), i_strReagentName);
      ARRAYTOOLS::get_distinct_from_array(l_arr_strNamesActivateVisibility, l_arr_strNamesActivateVisibility_distinct);
      ARRAYTOOLS::ConcatenateAllElementsInArray(l_arr_strNamesActivateVisibility_distinct, l_strLabwareNamesActivateVisibility);
      Util2::Debug::TraceArray(Translate("l_arr_strNamesActivateVisibility_distinct: "), l_arr_strNamesActivateVisibility_distinct);
      _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_SequenceName"), l_strLabwareNamesActivateVisibility, Translate("DB_Name"), i_strReagentName);
      if(0){
        _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_SequenceName"), l_str_SequenceName, Translate("DB_Name"), i_strReagentName);
        ARRAYTOOLS::ConcatenateAllElementsInArray(l_arr_strLabwareIdsSequenceTemplate_Distinct, l_strLabwareIDs);
        _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_LabwareID"), l_strLabwareIDs, Translate("DB_Name"), i_strReagentName);
      }
      _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_PositionID"), l_strPositionIDs, Translate("DB_Name"), i_strReagentName);
      _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_SiteID"), l_strSiteIDs, Translate("DB_Name"), i_strReagentName);
      _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_CarrierName"), l_strTemplateIDs, Translate("DB_Name"), i_strReagentName);
      _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_TrackNumber"), l_int_TrackNumber, Translate("DB_Name"), i_strReagentName);
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return;
  }

  private function _Calculate_NumberOfContainersAndVolumePerContainer_BySampleNumber( variable i_strReagentName, variable i_intNumberOfSamples, variable i_fltTransferVolume, variable i_fltDeadVolumeLabware, variable i_fltDeadVolumeLiquid, variable i_fltMaximumVolumePerContainer, variable i_intNumberOfContainersRequired, variable & o_intNumberOfContainers, variable & o_arr_fltVolumePerContainer[], variable & o_fltTotalVolumeNeeded ) void {
    private variable l_intNumberOfSamplesFromFile;
    private variable l_fltDeadVolumePercentage;
    private variable l_fltVolumeExceeded;
    private variable l_intIndexArrVolumeTubes;
    private variable l_intMaxVolumePerContainer;
    private variable l_blnShowDialog;
    private variable l_fltDeadVolumeContainer;
    private variable l_fltCompleteNumber;
    private variable l_fltTransferVolumeRecalculated;
    private variable l_fltTransferVolume;
    private variable l_fltVolumeExceededTotal;
    private variable l_intMinimumNumberOfContainer;
    private variable l_fltCurrentVolumeToBeAdded;
    private variable loopCounter2;
    private variable l_fltDeadVolumeLiquid;
    private variable l_blnForceLoopBreak;
    private variable l_intCompleteNumber;
    private variable l_intIncreaseNumberOfContainersBy;
    private variable l_intRest;
    private variable l_arrTubeVolume[];
    private variable l_fltTotalVolumeRequired;
    private variable l_arr_fltVolumesMerged[];
    private variable l_fltTotalDeadVolumeRequired;
    private variable l_fltRawVolumeRequired;
    o_intNumberOfContainers = 0;
    o_arr_fltVolumePerContainer.SetSize( 0);
    o_fltTotalVolumeNeeded = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    l_intNumberOfSamplesFromFile = i_intNumberOfSamples;
    l_fltTransferVolume = i_fltTransferVolume;
    l_fltDeadVolumeContainer = i_fltDeadVolumeLabware;
    l_intMaxVolumePerContainer = i_fltMaximumVolumePerContainer;
    l_intMinimumNumberOfContainer = i_intNumberOfContainersRequired;
    l_fltTotalDeadVolumeRequired = 0.0;
    l_fltRawVolumeRequired = i_intNumberOfSamples * i_fltTransferVolume;
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_intNumberOfSamplesFromFile : "), l_intNumberOfSamplesFromFile);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_fltTransferVolume: "), l_fltTransferVolume);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_fltDeadVolumeContainer : "), l_fltDeadVolumeContainer);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("i_fltDeadVolumeLiquid : "), i_fltDeadVolumeLiquid);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_intMaxVolumePerContainer : "), l_intMaxVolumePerContainer);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_intMinimumNumberOfContainer - requested : "), l_intMinimumNumberOfContainer);
    if (l_intNumberOfSamplesFromFile <= l_intMinimumNumberOfContainer)
    {
      l_intMinimumNumberOfContainer = l_intNumberOfSamplesFromFile;
      TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_intMinimumNumberOfContainer - allowed : "), l_intMinimumNumberOfContainer);
    }
    l_fltDeadVolumeLiquid = i_fltDeadVolumeLiquid / (100 * 1.0);
    l_fltDeadVolumePercentage = l_fltTransferVolume * l_fltDeadVolumeLiquid;
    l_fltTransferVolumeRecalculated = l_fltTransferVolume + l_fltDeadVolumePercentage;
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_fltTransferVolumeRecalculated (including dead volume liquid) : "), l_fltTransferVolumeRecalculated);
    l_blnForceLoopBreak = 0;
    l_blnShowDialog = 0;
    if (l_intMinimumNumberOfContainer == 0)
    {
      l_blnShowDialog = 1;
      l_intMinimumNumberOfContainer = 1;
    }
    {
      loopCounter2 = 0;
      while (1 == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        l_fltTotalVolumeRequired = 0;
        l_arrTubeVolume.SetSize(0);
        l_fltCompleteNumber = l_intNumberOfSamplesFromFile / (l_intMinimumNumberOfContainer * 1.0);
        l_intCompleteNumber = MthFloor(l_fltCompleteNumber);
        l_intRest = l_intNumberOfSamplesFromFile % l_intMinimumNumberOfContainer;
        l_fltVolumeExceededTotal = 0;
        {
          for(l_intIndexArrVolumeTubes = 0; l_intIndexArrVolumeTubes < l_intMinimumNumberOfContainer;)
          {
            l_intIndexArrVolumeTubes = l_intIndexArrVolumeTubes + 1;
            if (l_intIndexArrVolumeTubes <= l_intRest)
            {
              l_fltCurrentVolumeToBeAdded = l_intCompleteNumber * l_fltTransferVolumeRecalculated;
              l_fltCurrentVolumeToBeAdded = l_fltCurrentVolumeToBeAdded + l_fltTransferVolumeRecalculated;
            }
            else
            {
              l_fltCurrentVolumeToBeAdded = l_intCompleteNumber * l_fltTransferVolumeRecalculated;
            }
            l_fltCurrentVolumeToBeAdded = l_fltCurrentVolumeToBeAdded + l_fltDeadVolumeContainer;
            if (l_fltCurrentVolumeToBeAdded > l_intMaxVolumePerContainer)
            {
              l_fltVolumeExceeded = l_fltCurrentVolumeToBeAdded - l_intMaxVolumePerContainer;
              l_fltVolumeExceededTotal = l_fltVolumeExceededTotal + l_fltVolumeExceeded;
              l_intIncreaseNumberOfContainersBy = l_fltVolumeExceededTotal / (l_intMaxVolumePerContainer * 1.0);
              l_intIncreaseNumberOfContainersBy = MthCeiling(l_intIncreaseNumberOfContainersBy);
              if (l_intIncreaseNumberOfContainersBy == 0)
              {
                l_blnForceLoopBreak = 1;
              }
            }
            else
            {
              if (l_fltVolumeExceededTotal == 0)
              {
                l_blnForceLoopBreak = 1;
              }
            }
            l_arrTubeVolume.AddAsLast(l_fltCurrentVolumeToBeAdded);
            l_fltTotalVolumeRequired = l_fltTotalVolumeRequired + l_fltCurrentVolumeToBeAdded;
            if (l_fltCompleteNumber == 1)
            {
              if (l_intRest == 0)
              {
                l_blnForceLoopBreak = 1;
              }
            }
          }
        }
        TRACELEVEL::TraceArray(t_intGetTraceLevel, Translate("l_arrTubeVolume : "), l_arrTubeVolume);
        if (l_blnForceLoopBreak == 1)
        {
          break;
        }
        else
        {
          l_intMinimumNumberOfContainer = l_intMinimumNumberOfContainer + l_intIncreaseNumberOfContainersBy;
          TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_intMinimumNumberOfContainer - modified : "), l_intMinimumNumberOfContainer);
        }
      }
    }
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_intMinimumNumberOfContainer - automatic : "), l_intMinimumNumberOfContainer);
    l_fltTotalDeadVolumeRequired = l_fltTotalVolumeRequired - l_fltRawVolumeRequired;
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_fltRawVolumeRequired : "), l_fltRawVolumeRequired);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_fltTotalDeadVolumeRequired : "), l_fltTotalDeadVolumeRequired);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_fltTotalVolumeRequired : "), l_fltTotalVolumeRequired);
    o_intNumberOfContainers = l_intMinimumNumberOfContainer;
    ARRAYTOOLS::mergeArrays(t_arr_fltVolumes, l_arrTubeVolume, l_arr_fltVolumesMerged);
    t_arr_fltVolumes=l_arr_fltVolumesMerged;
    o_arr_fltVolumePerContainer=l_arrTubeVolume;
    o_fltTotalVolumeNeeded = l_fltTotalVolumeRequired;
    _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_DeadVolumeLabware"), i_fltDeadVolumeLabware, Translate("DB_Name"), i_strReagentName);
    _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_DeadVolumePercent"), i_fltDeadVolumeLiquid, Translate("DB_Name"), i_strReagentName);
    _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_TotalVolume"), l_fltTotalVolumeRequired, Translate("DB_Name"), i_strReagentName);
    _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_NumberOfSamples"), i_intNumberOfSamples, Translate("DB_Name"), i_strReagentName);
    _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_TotalDeadVolume"), l_fltTotalDeadVolumeRequired, Translate("DB_Name"), i_strReagentName);
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return;
  }

  private function _ContainerDefinition( variable i_strLabwareType, variable & o_strContainerDefinition, variable & o_fltOffsetZ ) void {
    private variable l_arr_strLabwareType[];
    private variable l_arr_strContainerDefinitionForThisLabwareType[];
    private variable l_arr_strContainerDefinition[];
    private variable l_str_FunctionName;
    private variable l_intSizeArray;
    private variable l_arr_strContainerOffsetForThisLabwareType[];
    private variable l_arr_strContainerOffsetZ[];
    o_strContainerDefinition = 0;
    o_fltOffsetZ = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_strLabwareType, Translate("i_strLabwareType"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    l_arr_strLabwareType.SetSize(0);
    l_arr_strLabwareType.AddAsLast(Translate("Adp_Sar_VB_TuB_0.5 mL"));
    l_arr_strLabwareType.AddAsLast(Translate("Adp_Sar_VB_TuB_1.5 mL"));
    l_arr_strLabwareType.AddAsLast(Translate("Adp_Sar_VB_TuB_2.0 mL_skirt"));
    l_arr_strContainerDefinition.SetSize(0);
    l_arr_strContainerDefinition.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\LabWare\Hamilton CoolingCarrier\Adp_Sar_VB_TuB_0.5ml.ctr"));
    l_arr_strContainerDefinition.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\LabWare\Hamilton CoolingCarrier\Adp_Sar_VB_TuB_1.5ml.ctr"));
    l_arr_strContainerDefinition.AddAsLast(Translate("C:\Program Files (x86)\HAMILTON\LabWare\Hamilton CoolingCarrier\Adp_Sar_VB_TuB_2.0ml_skirt.ctr"));
    l_arr_strContainerOffsetZ.SetSize(0);
    l_arr_strContainerOffsetZ.AddAsLast(6);
    l_arr_strContainerOffsetZ.AddAsLast(0.0);
    l_arr_strContainerOffsetZ.AddAsLast(0.0);
    ARRAYTOOLS::ArrayVLookUp(l_arr_strContainerDefinition, l_arr_strLabwareType, i_strLabwareType, l_arr_strContainerDefinitionForThisLabwareType);
    ARRAYTOOLS::ArrayVLookUp(l_arr_strContainerOffsetZ, l_arr_strLabwareType, i_strLabwareType, l_arr_strContainerOffsetForThisLabwareType);
    l_intSizeArray=l_arr_strContainerDefinitionForThisLabwareType.GetSize();
    if(0){
      if (l_intSizeArray == 0)
      {
        o_strContainerDefinition = ASWGLOBAL::BOOL::FALSE;
        o_fltOffsetZ = 0.0;
      }
      else
      {
        o_strContainerDefinition = l_arr_strContainerDefinitionForThisLabwareType.ElementAt( 1 -1);
        o_fltOffsetZ = l_arr_strContainerOffsetZ.ElementAt( 1 -1);
      }
    }
    o_strContainerDefinition = ASWGLOBAL::BOOL::FALSE;
    o_fltOffsetZ = 0.0;
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return;
  }

  private function _FindLiquidIndDB( variable i_strLiquidName, variable & o_strLiquidType ) void {
    private variable l_strSQLSentence;
    private variable l_intRecordCounter;
    private variable loopCounter1;
    private variable l_str_FunctionName;
    private variable l_strLiquidType;
    o_strLiquidType = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_strLiquidName, Translate("i_strLiquidName"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    t_blnLiquidIsMastermix = ASWGLOBAL::BOOL::FALSE;
    t_blnLiquidIsReagent = ASWGLOBAL::BOOL::FALSE;
    t_blnLiquidIsMastermixComponent = ASWGLOBAL::BOOL::FALSE;
    l_str_FunctionName = GetFunctionName();
    l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_Name] = '",i_strLiquidName,"'","","","","","","","","","");
    Trace(l_strSQLSentence);
    _FileOpenRunData(l_strSQLSentence, 1);
    l_strLiquidType = Translate("");
    l_intRecordCounter = 0;
    {
      loopCounter1 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_intRecordCounter = l_intRecordCounter + 1;
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    if (l_intRecordCounter != 0)
    {
      l_strLiquidType = file_RunData_DB_Type;
      if (l_strLiquidType == t_strType_Mastermix)
      {
        t_blnLiquidIsMastermix = ASWGLOBAL::BOOL::TRUE;
      }
      if (l_strLiquidType == t_strType_Reagent)
      {
        t_blnLiquidIsReagent = ASWGLOBAL::BOOL::TRUE;
      }
      if (l_strLiquidType == t_strType_MastermixComponent)
      {
        t_blnLiquidIsMastermixComponent = ASWGLOBAL::BOOL::TRUE;
      }
    }
    if (l_strLiquidType != "")
    {
      o_strLiquidType = l_strLiquidType;
    }
    else
    {
      o_strLiquidType = Translate("NotFound");
    }
    Trace("t_blnLiquidIsReagent: ",t_blnLiquidIsReagent);
    Trace("t_blnLiquidIsMastermix: ",t_blnLiquidIsMastermix);
    Trace("t_blnLiquidIsMastermixComponent: ",t_blnLiquidIsMastermixComponent);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("o_strLiquidType: "), o_strLiquidType);
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return;
  }

  private function _TraceArraysInParallel( variable & i_arr1[], variable & i_arr2[], variable & i_arr3[], variable & i_arr4[], variable & i_arr5[], variable & i_arr6[], variable & i_arr7[] ) void {
    private variable l_intNumberOfElements;
    private variable loopCounter1;
    private variable l_strValuesFromArrays;
    private variable l_blnFunctionCompleted;
    private variable l_strMessage;
    private variable l_str_FunctionName;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    l_intNumberOfElements=i_arr1.GetSize();
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("----------- Trace Reagent Data in Task-Local Arrays"), Translate(""));
    onerror goto errLabel_3 ;
    err.Clear();
    l_strValuesFromArrays = Translate("");
    l_strValuesFromArrays = StrConcat12(Translate("Reagent Name"), Translate("--\t--"), Translate("Volume"), Translate("--\t--"), Translate("Position Id"), Translate("--\t--"), Translate("Labware Id"), Translate("--\t--"), Translate("Labware type"), Translate("--\t--"), Translate("Site Id"), Translate("--\t--"));
    l_strValuesFromArrays = StrConcat12(l_strValuesFromArrays, Translate(""), Translate("Carrier Id"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    TRACELEVEL::Trace_02(t_intGetTraceLevel, l_strValuesFromArrays, Translate(""));
    {
      for(loopCounter1 = 0; loopCounter1 < l_intNumberOfElements;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_strValuesFromArrays = Translate("");
        l_strValuesFromArrays = StrConcat12(i_arr1.ElementAt( loopCounter1 -1), Translate("--\t--"), i_arr2.ElementAt( loopCounter1 -1), Translate("--\t--"), i_arr3.ElementAt( loopCounter1 -1), Translate("--\t--"), i_arr4.ElementAt( loopCounter1 -1), Translate("--\t--"), i_arr5.ElementAt( loopCounter1 -1), Translate("--\t--"), i_arr6.ElementAt( loopCounter1 -1), Translate("--\t--"));
        l_strValuesFromArrays = StrConcat12(l_strValuesFromArrays, Translate(""), i_arr7.ElementAt( loopCounter1 -1), Translate("--\t--"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        TRACELEVEL::Trace_02(t_intGetTraceLevel, l_strValuesFromArrays, Translate(""));
      }
    }
    l_blnFunctionCompleted = ASWGLOBAL::BOOL::TRUE;
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      l_blnFunctionCompleted = ASWGLOBAL::BOOL::FALSE;
      l_strMessage = StrConcat12(Translate("Function: "), l_str_FunctionName, Translate("\nError: Inconsistent array size detected. Ensure all arrays have the same size for parallel tracing. Check in traceview inconsistent array"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      DisplayDialog_Warning(l_strMessage, Translate(""), 0, Translate(""), 0);
      TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate(""), i_arr1);
      TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate(""), i_arr2);
      TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate(""), i_arr3);
      TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate(""), i_arr4);
      TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate(""), i_arr5);
      TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate(""), i_arr6);
      TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate(""), i_arr7);
    }   /* end if from skip handler if no error */
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return;
  }

  function DisplayDialog_MastermixRecipe( variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable {
    private variable l_strBottomText;
    private variable l_int_NumberOfMastermixToDisplay;
    private variable l_int_rtnErrorDialog;
    private variable file_RunData_DB_MasterMixComponentName_reformatted;
    private variable l_strFullpathLoadingPicture;
    private variable l_intReturnDisplayDialog;
    private variable l_str_SQLSentence;
    private variable loopCounter4;
    private variable l_str_TotalVolume;
    private variable l_arr_strMastermixNames[];
    private variable l_arr_strMastermixLabwareType[];
    private variable l_arr_strMastermixVolumes[];
    private variable l_arr_strColumnHeaders[];
    private variable l_str_MastermixRecipe_PDFFilePath;
    private variable l_arr_strMastermixComponentNames[];
    private variable l_strDB_Description;
    private variable l_str_MastermixName;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    l_arr_strMastermixNames.SetSize(0);
    l_arr_strMastermixVolumes.SetSize(0);
    l_arr_strMastermixLabwareType.SetSize(0);
    l_arr_strMastermixComponentNames.SetSize(0);
    if(0){
      l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_Type] <> 'Reagent' AND [DB_Type] <> 'LabwareResource'","","","","","","","","","","","");
      Trace(l_str_SQLSentence);
    }
    l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_Type] <> 'Reagent' AND [DB_Type] <> 'LabwareResource' AND [DB_MastermixPreparedOnDeck] = 0","","","","","","","","","","","");
    Trace(l_str_SQLSentence);
    _FileOpenRunData(l_str_SQLSentence, 1);
    {
      loopCounter4 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter4 = loopCounter4 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (file_RunData_DB_Type == t_strType_MastermixComponent)
        {
          file_RunData_DB_MasterMixComponentName_reformatted = StrConcat4(Translate("---  "), file_RunData_DB_MasterMixComponentName, Translate(""), Translate(""));
          l_arr_strMastermixNames.AddAsLast(file_RunData_DB_MasterMixComponentName_reformatted);
          l_arr_strMastermixComponentNames.AddAsLast(file_RunData_DB_MasterMixComponentName);
        }
        else
        {
          l_str_MastermixName = StrConcat12(file_RunData_DB_Name, Translate(" ("), file_RunData_DB_ContainerDescription, Translate(")"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          l_arr_strMastermixNames.AddAsLast(l_str_MastermixName);
          l_strDB_Description = file_RunData_DB_Description;
          StrReplace(l_strDB_Description, Translate("\n"), Translate(" + "));
          l_strDB_Description = StrConcat4(file_RunData_DB_Units, Translate(" x "), l_strDB_Description, Translate(""));
        }
        _Reformat_VolumesForDialog(file_RunData_DB_TotalVolume, Translate("uL"), l_str_TotalVolume);
        l_arr_strMastermixVolumes.AddAsLast(l_str_TotalVolume);
        l_arr_strMastermixLabwareType.AddAsLast(file_RunData_DB_Description);
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    l_int_NumberOfMastermixToDisplay=l_arr_strMastermixNames.GetSize();
    if (t_intGetTraceLevel == TRACE_LEVEL_DEBUG)
    {
      Util2::Debug::TraceArray_3(Translate(""), l_arr_strMastermixNames, l_arr_strMastermixVolumes, l_arr_strMastermixLabwareType);
    }
    if (l_int_NumberOfMastermixToDisplay > 0)
    {
      l_arr_strColumnHeaders.SetSize(0);
      l_arr_strColumnHeaders.AddAsLast(Translate("Name"));
      l_arr_strColumnHeaders.AddAsLast(Translate("Volume (µL)"));
      l_arr_strColumnHeaders.AddAsLast(Translate("Number of Containers and [Volume per container]"));
      l_int_rtnErrorDialog = VectorCustomDialogs::LoadingDialogSetResources(l_arr_strColumnHeaders);
      l_str_MastermixRecipe_PDFFilePath = Translate("C://Program Files (x86)//HAMILTON//Logfiles//LoadingDocuments");
      l_strBottomText = StrConcat4(Translate("The information above will be automatically saved at following directory:\n "), l_str_MastermixRecipe_PDFFilePath, Translate("\nPress OK to continue with the next step.\nPress Cancel to Abort."), Translate(""));
      l_strFullpathLoadingPicture = StrConcat12(t_str_LoadingPicturesFileDirectory, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("MasterMix.png"), Translate(""), Translate(""), Translate(""), Translate(""));
      if (i_str_SoundFilePath != "")
      {
        VectorCustomDialogs::ActivateSoundForNextDialog(i_str_SoundFilePath, i_int_SoundLoop);
      }
      l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Prepare Mastermix according to instructions below."), l_strBottomText, l_strFullpathLoadingPicture, Translate(""), 300, l_arr_strMastermixNames, l_arr_strMastermixVolumes, l_arr_strMastermixLabwareType);
      if (l_intReturnDisplayDialog == 2)
      {
        abort;
      }
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _GenerateString_VolumeUnits( variable i_flt_Volume, variable & o_str_Description ) void {
    private variable l_str_TotalVolumePerContainer;
    private variable l_str_UnitsVolume;
    private variable l_flt_TotalVolumePerContainerML;
    private variable l_str_FunctionName;
    o_str_Description = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_flt_Volume, Translate("i_flt_Volume"), Translate("if"), ASWGLOBAL::BOOL::FALSE);
    if (i_flt_Volume > 3000)
    {
      l_str_UnitsVolume = Translate("mL");
      l_flt_TotalVolumePerContainerML = i_flt_Volume / (1000 * 1.0);
      _Reformat_VolumesForDialog(l_flt_TotalVolumePerContainerML, l_str_UnitsVolume, l_str_TotalVolumePerContainer);
    }
    else
    {
      l_str_UnitsVolume = Translate("µL");
      _Reformat_VolumesForDialog(i_flt_Volume, l_str_UnitsVolume, l_str_TotalVolumePerContainer);
    }
    o_str_Description = StrConcat12(Translate(""), l_str_TotalVolumePerContainer, Translate(""), l_str_UnitsVolume, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return;
  }

  private function _Trace_FileRunDataVariables(  ) void {
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_Name: "), file_RunData_DB_Name);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_Type: "), file_RunData_DB_Type);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_VolumePerWell: "), file_RunData_DB_VolumePerWell);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_DeadVolumeLabware: "), file_RunData_DB_DeadVolumeLabware);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_DeadVolumePercent: "), file_RunData_DB_DeadVolumePercent);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_ExtraVolume: "), file_RunData_DB_ExtraVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_TotalVolume: "), file_RunData_DB_TotalVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_NumberOfSamples: "), file_RunData_DB_NumberOfSamples);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_Units: "), file_RunData_DB_Units);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_TrackNumber: "), file_RunData_DB_TrackNumber);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_MasterMixComponentName: "), file_RunData_DB_MasterMixComponentName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_Ratio: "), file_RunData_DB_Ratio);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_CarrierName: "), file_RunData_DB_CarrierName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_SiteID: "), file_RunData_DB_SiteID);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_LabwareName: "), file_RunData_DB_LabwareName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_LabwareDescription: "), file_RunData_DB_LabwareDescription);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_LabwareFileName: "), file_RunData_DB_LabwareFileName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_PositionID: "), file_RunData_DB_PositionID);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_Description: "), file_RunData_DB_Description);
    return;
  }

  private function _RunDATA_AddRecord( variable i_str_ColumnName, variable i_value, variable i_int_FileHandler ) variable {
    private variable l_str_RunDATA_TableNameDollar;
    private variable l_str_inputValueVarType;
    private variable l_int_RecordCounter;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    l_str_inputValueVarType = StrGetType(i_value);
    if (i_int_FileHandler == 1)
    {
      l_str_RunDATA_TableNameDollar = StrConcat2(Translate("RunData"), Translate("$"));
    }
    if (i_int_FileHandler == 2)
    {
      l_str_RunDATA_TableNameDollar = StrConcat2(Translate("MultipleChoiceDialog_Definition"), Translate("$"));
    }
    if (i_int_FileHandler == 3)
    {
      l_str_RunDATA_TableNameDollar = StrConcat2(Translate("SummaryMasterMixPrep"), Translate("$"));
    }
    if (l_str_inputValueVarType == "i")
    {
      file_RunData.AddField(i_str_ColumnName, i_value, hslInteger);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
    }
    if (l_str_inputValueVarType == "f")
    {
      file_RunData.AddField(i_str_ColumnName, i_value, hslFloat);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
    }
    if (l_str_inputValueVarType == "s")
    {
      file_RunData.AddField(i_str_ColumnName, i_value, hslString, 255);
      if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
      }
    }
    if( 0 == file_RunData.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_int_RecordCounter = l_int_RecordCounter + 1;
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    if (l_int_RecordCounter > 0)
    {
      TRACELEVEL::Trace_10(Translate("Add Value: "), i_value, Translate(" to Column: "), i_str_ColumnName, Translate(" in file "), l_str_RunDATA_TableNameDollar, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      return (ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
  }

  private function _DescriptionForDialog( variable i_intNumberOfContainers, variable i_strLabwareType, variable & i_arr_fltVolumePerContainer[], variable & o_strDescription ) void {
    private variable l_int_NumberOfEqualVolumes;
    private variable loopCounter1;
    private variable l_intDistinctVolumes;
    private variable l_arr_fltVolumePerContainer_Distinct[];
    private variable l_arr_fltVolumePerContainer[];
    private variable l_strTempVolume;
    private variable l_str_FunctionName;
    o_strDescription = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_intNumberOfContainers, Translate("i_intNumberOfContainers"), Translate("i"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_strLabwareType, Translate("i_strLabwareType"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    o_strDescription = Translate("");
    if(0){
      o_strDescription = StrConcat12(i_strLabwareType, Translate(" :"), Translate("\n"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    ARRAYTOOLS::get_distinct_from_array(i_arr_fltVolumePerContainer, l_arr_fltVolumePerContainer_Distinct);
    l_intDistinctVolumes=l_arr_fltVolumePerContainer_Distinct.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < l_intDistinctVolumes;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_arr_fltVolumePerContainer.SetSize(0);
        ARRAYTOOLS::ArrayVLookUp(i_arr_fltVolumePerContainer, i_arr_fltVolumePerContainer, l_arr_fltVolumePerContainer_Distinct.ElementAt( loopCounter1 -1), l_arr_fltVolumePerContainer);
        l_int_NumberOfEqualVolumes=l_arr_fltVolumePerContainer.GetSize();
        _Reformat_VolumesForDialog(l_arr_fltVolumePerContainer_Distinct.ElementAt( loopCounter1 -1), Translate("uL"), l_strTempVolume);
        if (loopCounter1 == l_intDistinctVolumes)
        {
          o_strDescription = StrConcat12(o_strDescription, l_int_NumberOfEqualVolumes, Translate(" x ["), l_strTempVolume, Translate(" µL]"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        else
        {
          o_strDescription = StrConcat12(o_strDescription, l_int_NumberOfEqualVolumes, Translate(" x ["), l_strTempVolume, Translate(" µL]"), Translate("\n"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
      }
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return;
  }

  function Evaluate_ResourcesByCarrier( device & ML_STAR, variable & o_arr_strTemplateIds_ToLoad[], variable & o_arr_strTemplateIds_AllCarriers[] ) variable {
    private sequence l_arr_seq_SequencesFromDeck[];
    private variable l_str_TemplateID;
    private variable l_str_TrackNumber;
    private variable l_int_NumberOfSequencesOnDeck;
    private variable l_str_LabwareId;
    private variable l_str_SiteID;
    private variable loopCounter1;
    private variable l_arr_str_SequenceNamesFromDeck[];
    private variable l_arr_strTemplateIds_AllCarriers[];
    private variable loopCounter2;
    private variable l_int_NumberOfCarriersToLoad;
    private variable l_arr_fltCarrierXcoordinate[];
    private variable l_flt_CoordinateX;
    private variable l_flt_CoordinateY;
    private variable l_flt_CoordinateZ;
    private variable l_flt_CoordinateR;
    private sequence l_seq_CurrentSeq;
    o_arr_strTemplateIds_ToLoad.SetSize( 0);
    o_arr_strTemplateIds_AllCarriers.SetSize( 0);
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    ARRAYTOOLS::get_distinct_from_array(t_arr_strTemplateIds, t_arr_strTemplateIds_distinct);
    TRACELEVEL::TraceArray(t_intGetTraceLevel, Translate("t_arr_strTemplateIds_distinct: "), t_arr_strTemplateIds_distinct);
    _GetAllDeckSequences(ML_STAR, l_arr_seq_SequencesFromDeck, l_arr_str_SequenceNamesFromDeck);
    l_int_NumberOfSequencesOnDeck=l_arr_seq_SequencesFromDeck.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfSequencesOnDeck;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_seq_CurrentSeq=l_arr_seq_SequencesFromDeck.GetAt(loopCounter1-1);
        l_seq_CurrentSeq.SetCurrentPosition(1);
        l_str_LabwareId = SeqGetLabwareId(l_seq_CurrentSeq);
        TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, l_arr_seq_SequencesFromDeck.ElementAt( loopCounter1 -1));
        _GetCarrierAndSiteID(ML_STAR, l_str_LabwareId, l_str_TemplateID, l_str_SiteID, l_str_TrackNumber);
        l_arr_strTemplateIds_AllCarriers.AddAsLast(l_str_TemplateID);
      }
    }
    ARRAYTOOLS::get_distinct_from_array(l_arr_strTemplateIds_AllCarriers, o_arr_strTemplateIds_AllCarriers);
    TRACELEVEL::TraceArray(t_intGetTraceLevel, Translate("o_arr_strTemplateIds_AllCarriers: "), o_arr_strTemplateIds_AllCarriers);
    l_int_NumberOfCarriersToLoad=t_arr_strTemplateIds_distinct.GetSize();
    l_arr_fltCarrierXcoordinate.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfCarriersToLoad;)
      {
        loopCounter2 = loopCounter2 + 1;
        HSLLabwrAccess::AbsolutePositionValuesGetForLabwareID(ML_STAR, t_arr_strTemplateIds_distinct.ElementAt( loopCounter2 -1), l_flt_CoordinateX, l_flt_CoordinateY, l_flt_CoordinateZ, l_flt_CoordinateR);
        l_arr_fltCarrierXcoordinate.AddAsLast(l_flt_CoordinateX);
      }
    }
    _Sort2ArraysByNumericAscendingOrder(l_arr_fltCarrierXcoordinate, t_arr_strTemplateIds_distinct);
    o_arr_strTemplateIds_ToLoad=t_arr_strTemplateIds_distinct;
    TRACELEVEL::TraceArray(t_intGetTraceLevel, Translate("o_arr_strTemplateIds_ToLoad: "), o_arr_strTemplateIds_ToLoad);
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function DisplayDialog_LoadCarrier( variable i_strCarrierName, variable i_strFilePath_MainImage, variable i_strFilePath_SubImage, variable i_int_Timeout, device & ML_STAR, variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable {
    private variable l_arr_DataColumn3_Descriptions[];
    private variable l_arr_DataColumn1_Positions[];
    private variable l_arr_DataColumn2_QuantityVolumes[];
    private variable l_str_FunctionName;
    private variable l_intReturnSearchCarrierName;
    private variable l_str_SQLSentence;
    private variable loopCounter2;
    private variable l_str_PLT_1000TIP_Positions;
    private variable l_arr_strPositionIds_ForThisCarrier[];
    private variable l_arr_MultipleElementForThisCarrier[];
    private variable l_intReturnDisplayDialog;
    private variable l_arr_ColumnHeaders[];
    private variable l_str_LoadingPicturesFileDirectoryAndSmallImageName;
    private variable l_str_LoadingPicturesFileDirectoryAndImageName;
    private variable l_rtnFileExists;
    private variable l_strMessage;
    private variable t_arr_strAdditionalDataColumn1_temp[];
    private variable t_arr_strAdditionalDataColumn3_temp[];
    private variable loopCounter1;
    private variable l_intNumberOfAdditionalDataRecords;
    private variable t_arr_intAdditionalDataColumn2_temp[];
    private variable l_intLengthString;
    private variable l_strTopMessageDialog;
    private variable l_str_TemplateConfigFilePath;
    private variable l_str_TemplateConfigDirectory;
    private variable l_str_TemplateConfigFileNameWOext;
    private variable l_str_RunData_DB_Units_LabwareViewName;
    private variable l_strCarrierName;
    private variable l_arr_strLabwareVisible[];
    private sequence l_seq_SetVisibilityToTrue;
    private variable l_arr_LabIDsFromSequence[];
    private variable l_intNumberOfLabwareIDs;
    private variable loopCounter3;
    private variable l_str_Description;
    private variable l_int_LengthString;
    private variable l_str_FindTipInString;
    private variable l_str_FindSingleTrackCarrier;
    private variable l_str_FindMultipleSeqNames;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("Loading carrier: "), i_strCarrierName);
    _Reset_FileRunData_Variables();
    _CheckPoint_Variable_Type(l_str_FunctionName, i_strCarrierName, Translate("i_strCarrierName"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    l_arr_DataColumn1_Positions.SetSize(0);
    l_arr_DataColumn2_QuantityVolumes.SetSize(0);
    l_arr_DataColumn3_Descriptions.SetSize(0);
    l_arr_MultipleElementForThisCarrier.SetSize(0);
    l_arr_strPositionIds_ForThisCarrier.SetSize(0);
    l_arr_strLabwareVisible.SetSize(0);
    l_strCarrierName = Translate("");
    l_intReturnSearchCarrierName = ARRAYTOOLS::Lookup(t_arr_strTemplateIds_distinct, i_strCarrierName);
    if (l_intReturnSearchCarrierName > 0)
    {
      l_arr_strLabwareVisible.AddAsLast(i_strCarrierName);
      l_str_SQLSentence = Translate("");
      l_str_PLT_1000TIP_Positions = Translate("");
      l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_CarrierName] = '",i_strCarrierName,"'","","","","","","","","","");
      Trace(l_str_SQLSentence);
      //l_str_SQLSentence = StrConcat12("","","","","","","","","","","","");
      Trace ("t_str_FullpathFile_RunData: ", t_str_FullpathFile_RunData);
      _FileOpenRunData(l_str_SQLSentence, 1);
      {
        loopCounter2 = 0;
        while (
           (file_RunData.Eof() == 0)
        )
        {
          loopCounter2 = loopCounter2 + 1;
          if( 0 == file_RunData.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if (file_RunData_DB_AddToDialog == ASWGLOBAL::BOOL::TRUE)
          {
            l_str_FindTipInString = StrFind(file_RunData_DB_LabwareName, Translate("Tip"));
            if (l_str_FindTipInString < 0)
            {
              l_int_LengthString = StrGetLength(file_RunData_DB_ContainerDescription);
              if (l_int_LengthString != 0)
              {
                l_str_FindSingleTrackCarrier = StrFind(file_RunData_DB_SiteID, Translate("T-"));
                if (l_str_FindSingleTrackCarrier < 0)
                {
                  l_str_Description = StrConcat8(file_RunData_DB_LabwareDescription, Translate(" - "), file_RunData_DB_PositionID, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                }
                else
                {
                  l_str_Description = StrConcat8(file_RunData_DB_PositionID, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                }
              }
              else
              {
                l_str_Description = StrConcat8(file_RunData_DB_PositionID, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              }
              l_arr_DataColumn1_Positions.AddAsLast(l_str_Description);
              if (file_RunData_DB_SequenceName != "")
              {
                DevGetSequence(ML_STAR, file_RunData_DB_SequenceName, l_seq_SetVisibilityToTrue);
                l_str_FindMultipleSeqNames = StrFind(file_RunData_DB_SequenceName, Translate(","));
                if (l_str_FindMultipleSeqNames >= 0)
                {
                  STRTOKENIZE::StrTokenize(file_RunData_DB_SequenceName, Translate(","), l_arr_LabIDsFromSequence, ASWGLOBAL::BOOL::FALSE);
                }
                else
                {
                  l_arr_LabIDsFromSequence.SetSize(0);
                  SeqGetLabwareIds(l_seq_SetVisibilityToTrue, l_arr_LabIDsFromSequence);
                }
                l_intNumberOfLabwareIDs=l_arr_LabIDsFromSequence.GetSize();
                TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, l_seq_SetVisibilityToTrue);
                {
                  for(loopCounter3 = 0; loopCounter3 < l_intNumberOfLabwareIDs;)
                  {
                    loopCounter3 = loopCounter3 + 1;
                    l_arr_strLabwareVisible.AddAsLast(l_arr_LabIDsFromSequence.ElementAt( loopCounter3 -1));
                  }
                }
              }
              l_intLengthString = StrGetLength(file_RunData_DB_LabwareName);
              if (l_intLengthString != 0)
              {
                l_int_LengthString = StrGetLength(file_RunData_DB_ContainerDescription);
                if (file_RunData_DB_Units == 0)
                {
                  if (l_int_LengthString == 0)
                  {
                    l_str_RunData_DB_Units_LabwareViewName = StrConcat12(Translate(""), Translate(""), file_RunData_DB_LabwareName, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                  }
                  else
                  {
                    l_str_RunData_DB_Units_LabwareViewName = StrConcat12(Translate(""), Translate(""), file_RunData_DB_ContainerDescription, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                  }
                }
                else
                {
                  if (l_int_LengthString == 0)
                  {
                    if (file_RunData_DB_LabwareName == "")
                    {
                      l_str_RunData_DB_Units_LabwareViewName = StrConcat12(file_RunData_DB_Units, Translate(" (No description for Labware)"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    }
                    else
                    {
                      l_str_RunData_DB_Units_LabwareViewName = StrConcat12(file_RunData_DB_Units, Translate(" x "), file_RunData_DB_LabwareName, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    }
                  }
                  else
                  {
                    if (file_RunData_DB_ContainerDescription == "")
                    {
                      l_str_RunData_DB_Units_LabwareViewName = StrConcat12(file_RunData_DB_Units, Translate(""), Translate(" (No description for ctr)"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    }
                    else
                    {
                      l_str_RunData_DB_Units_LabwareViewName = StrConcat12(file_RunData_DB_Units, Translate(" x "), file_RunData_DB_ContainerDescription, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    }
                  }
                }
              }
              else
              {
                _ConvertValueToString(file_RunData_DB_Units, l_str_RunData_DB_Units_LabwareViewName);
              }
              l_arr_DataColumn2_QuantityVolumes.AddAsLast(l_str_RunData_DB_Units_LabwareViewName);
              l_intLengthString = StrGetLength(file_RunData_DB_Name);
              if (l_intLengthString != 0)
              {
                if (file_RunData_DB_Name != file_RunData_DB_LabwareName)
                {
                  file_RunData_DB_Description = StrConcat12(file_RunData_DB_Name, Translate("\n"), file_RunData_DB_Description, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                }
                else
                {
                  file_RunData_DB_Description = StrConcat12(Translate(""), Translate(""), file_RunData_DB_Description, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                }
              }
              l_arr_DataColumn3_Descriptions.AddAsLast(file_RunData_DB_Description);
            }
          }
        }
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
      Util2::Debug::TraceArray(Translate("l_arr_DataColumn1_Positions: "), l_arr_DataColumn1_Positions);
      Util2::Debug::TraceArray(Translate("l_arr_DataColumn2_QuantityVolumes: "), l_arr_DataColumn2_QuantityVolumes);
      Util2::Debug::TraceArray(Translate("l_arr_DataColumn3_Descriptions: "), l_arr_DataColumn3_Descriptions);
      ARRAYTOOLS::ArrayVLookUp(t_arr_strAdditionalDataColumn1, t_arr_strAdditionalDataCarrierName, i_strCarrierName, t_arr_strAdditionalDataColumn1_temp);
      ARRAYTOOLS::ArrayVLookUp(t_arr_intAdditionalDataColumn2, t_arr_strAdditionalDataCarrierName, i_strCarrierName, t_arr_intAdditionalDataColumn2_temp);
      ARRAYTOOLS::ArrayVLookUp(t_arr_strAdditionalDataColumn3, t_arr_strAdditionalDataCarrierName, i_strCarrierName, t_arr_strAdditionalDataColumn3_temp);
      l_intNumberOfAdditionalDataRecords=t_arr_strAdditionalDataColumn1_temp.GetSize();
      if (l_intNumberOfAdditionalDataRecords > 0)
      {
        {
          for(loopCounter1 = 0; loopCounter1 < l_intNumberOfAdditionalDataRecords;)
          {
            loopCounter1 = loopCounter1 + 1;
            l_arr_DataColumn1_Positions.AddAsLast(t_arr_strAdditionalDataColumn1_temp.ElementAt( loopCounter1 -1));
            l_arr_DataColumn2_QuantityVolumes.AddAsLast(t_arr_intAdditionalDataColumn2_temp.ElementAt( loopCounter1 -1));
            l_arr_DataColumn3_Descriptions.AddAsLast(t_arr_strAdditionalDataColumn3_temp.ElementAt( loopCounter1 -1));
          }
        }
      }
      l_arr_ColumnHeaders.SetSize(0);
      l_arr_ColumnHeaders.AddAsLast(Translate("Position"));
      l_arr_ColumnHeaders.AddAsLast(Translate("Quantity and Labware type"));
      l_arr_ColumnHeaders.AddAsLast(Translate("Description"));
      _GroupDataInDialog(l_arr_DataColumn1_Positions, l_arr_DataColumn2_QuantityVolumes, l_arr_DataColumn3_Descriptions, ASWGLOBAL::BOOL::TRUE);
      _SortElements(l_arr_DataColumn1_Positions, l_arr_DataColumn2_QuantityVolumes, l_arr_DataColumn3_Descriptions, 1);
      l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialogSetResources(l_arr_ColumnHeaders);
      l_str_TemplateConfigFilePath = Translate("");
      //Get Config File
      {
           object objDeckLayout;
           objDeckLayout = ML_STAR.GetDeckLayoutObject();
           if(!objDeckLayout.IsNull())
           {
                object objLabware;
                onerror goto HandleLabwareError;
                objLabware = objDeckLayout.Labware(i_strCarrierName);
                onerror goto 0;
                err.Clear();
                if(!objLabware.IsNull())
                {
                     object objEditLabware5;
                     objLabware.GetObject("IEditLabware5", objEditLabware5);
                    l_str_TemplateConfigFilePath = objEditLabware5.Filename;
                     objEditLabware5.ReleaseObject();
                     objDeckLayout.ReleaseObject();
                     objLabware.ReleaseObject();
                }
           }
                 // runtime error handling
              HandleLabwareError :
              {
                  variable errorID;
                  errorID=err.GetId();
                  err.Clear();
                   if(errorID != 0)
                   {
                        if (errorID==-1574764487)
                        {
                              Trace("LabwareID is  unknown.");
                        }
                        else
                        {
                              Trace("Unknown error occured.");
                        }
                   }
              }
      }
      l_str_TemplateConfigDirectory = HSLExtensions::File::GetDirectoryName(l_str_TemplateConfigFilePath);
      l_str_TemplateConfigFileNameWOext = HSLExtensions::File::GetFileNameWithoutExtension(l_str_TemplateConfigFilePath);
      if (i_strFilePath_MainImage == "")
      {
        LPQ::FILE_GetDefinitionFileValue(l_str_TemplateConfigFilePath, Translate("Image3D"), l_str_LoadingPicturesFileDirectoryAndImageName);
      }
      else
      {
        l_str_LoadingPicturesFileDirectoryAndImageName = i_strFilePath_MainImage;
      }
      if (i_strFilePath_SubImage == "")
      {
        l_str_LoadingPicturesFileDirectoryAndSmallImageName = Translate("");
      }
      else
      {
        l_str_LoadingPicturesFileDirectoryAndSmallImageName = i_strFilePath_SubImage;
      }
      l_rtnFileExists = HSLExtensions::File::Exists(l_str_LoadingPicturesFileDirectoryAndImageName);
      if (l_rtnFileExists == ASWGLOBAL::BOOL::FALSE)
      {
        l_strMessage = StrConcat12(Translate("Function: "), l_str_FunctionName, Translate("\n\n"), Translate("Input parameter:i_strFilePath_MainImage: "), l_str_LoadingPicturesFileDirectoryAndImageName, Translate("\nImage does not exists in the expected folder."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        Trace("l_strMessage: ",l_strMessage);
        if(0){
          DisplayDialog_Warning(l_strMessage, Translate(""), 0, Translate(""), 0);
        }
      }
      if (i_strFilePath_SubImage != "")
      {
        l_rtnFileExists = HSLExtensions::File::Exists(l_str_LoadingPicturesFileDirectoryAndSmallImageName);
        if (l_rtnFileExists == ASWGLOBAL::BOOL::FALSE)
        {
          l_strMessage = StrConcat12(Translate("Function: "), l_str_FunctionName, Translate("\n\n"), Translate("Input parameter:i_strFilePath_SubImage: "), i_strFilePath_SubImage, Translate("\nImage does not exists in the expected folder."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          Trace("l_strMessage: ",l_strMessage);
          if(0){
            DisplayDialog_Warning(l_strMessage, Translate(""), 15, Translate(""), 0);
          }
        }
      }
      Trace("l_str_LoadingPicturesFileDirectoryAndSmallImageName is: ",l_str_LoadingPicturesFileDirectoryAndSmallImageName);
      l_strTopMessageDialog = Translate("");
      HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_strCarrierName, Translate("MlStarCarLabelName"), i_strCarrierName);
      if (l_strCarrierName == "")
      {
        l_strCarrierName = i_strCarrierName;
      }
      l_strTopMessageDialog = StrConcat12(Translate("Loading Carrier: "), l_strCarrierName, Translate(""), Translate(""), Translate(""), Translate(""), Translate("\nTrack: "), file_RunData_DB_TrackNumber, Translate(""), Translate(""), Translate(""), Translate(""));
      Util2::Debug::TraceArray(Translate("l_arr_strLabwareVisible: "), l_arr_strLabwareVisible);
      Deck_Visualize_fromArray(ML_STAR, l_arr_strLabwareVisible, 1);
      Deck_Visualize_fromArray(ML_STAR, l_arr_strLabwareVisible, 5);
      if (i_str_SoundFilePath != "")
      {
        VectorCustomDialogs::ActivateSoundForNextDialog(i_str_SoundFilePath, i_int_SoundLoop);
      }
      else
      {
        if (i_strFilePath_SubImage == "")
        {
          l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, i_int_Timeout, l_strTopMessageDialog, Translate("Press OK to Continue, Cancel to Abort"), l_str_LoadingPicturesFileDirectoryAndImageName, Translate(""), 500, l_arr_DataColumn1_Positions, l_arr_DataColumn2_QuantityVolumes, l_arr_DataColumn3_Descriptions);
        }
        else
        {
          l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, i_int_Timeout, l_strTopMessageDialog, Translate("Press OK to Continue, Cancel to Abort"), l_str_LoadingPicturesFileDirectoryAndImageName, l_str_LoadingPicturesFileDirectoryAndSmallImageName, 500, l_arr_DataColumn1_Positions, l_arr_DataColumn2_QuantityVolumes, l_arr_DataColumn3_Descriptions);
        }
        if (l_intReturnDisplayDialog == 2)
        {
          DisplayDialog_Information(Translate("Cancel button pressed, system will abort"), Translate(""), 15, Translate(""), 0);
          abort;
        }
      }
      Deck_Visualize_fromArray(ML_STAR, l_arr_strLabwareVisible, 1);
    }
    else
    {
      MECC::TraceComment(Translate("Carrier ID not found   --> no loading will be performed!\n"));
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function AddDataToDialog_LoadCarrier( variable i_str_Carrier_Name, variable i_str_DataForColumn1_Positions, variable i_str_DataForColumn2_Text, variable i_str_DataForColumn3_Description, device & ML_STAR ) void {
    private variable l_str_FunctionName;
    private variable o_int_TrackNumber;
    private variable l_str_TemplateSiteID;
    private variable l_str_TemplateID;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_str_Carrier_Name, Translate("i_str_Carrier_Name"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_str_DataForColumn1_Positions, Translate("i_str_DataForColumn1_Positions"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_str_DataForColumn2_Text, Translate("i_str_DataForColumn2_Text"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_str_DataForColumn3_Description, Translate("i_str_DataForColumn3_Description"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    _Reset_FileRunData_Variables();
    t_arr_str_TempAdditionalDataForCarrier_Column1.SetSize(0);
    t_arr_str_TempAdditionalDataForCarrier_Column2.SetSize(0);
    t_arr_str_TempAdditionalDataForCarrier_Column3.SetSize(0);
    t_arr_strTemplateIds.AddAsLast(i_str_Carrier_Name);
    _GetCarrierAndSiteID(ML_STAR, i_str_Carrier_Name, l_str_TemplateID, l_str_TemplateSiteID, o_int_TrackNumber);
    _FileOpenRunData(Translate(""), 2);
    file_RunData_DB_CarrierName = i_str_Carrier_Name;
    file_RunData_DB_PositionID = i_str_DataForColumn1_Positions;
    file_RunData_DB_Units = 0;
    file_RunData_DB_TrackNumber = o_int_TrackNumber;
    file_RunData_DB_ContainerDescription = Translate("");
    file_RunData_DB_ContainerViewName = Translate("");
    if (i_str_DataForColumn2_Text != "")
    {
      file_RunData_DB_LabwareFileName = Translate("");
      file_RunData_DB_Type = Translate("Labware");
      file_RunData_DB_LabwareName = i_str_DataForColumn2_Text;
    }
    else
    {
      file_RunData_DB_LabwareFileName = Translate("");
    }
    file_RunData_DB_Description = i_str_DataForColumn3_Description;
    if( 0 == file_RunData.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
  }

  function DisplayDialog_SelectInputWorklist( variable & o_str_FileWorklistFullPath, variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable {
    private variable i_str_fileFormat;
    private variable l_str_FileFilter;
    private variable l_strErrorMessage;
    private variable l_intReturnDisplayDialog;
    private variable loopCounter2;
    private variable t_strDirectoryName;
    private variable l_str_FileExtension;
    o_str_FileWorklistFullPath = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    l_str_FileFilter = Translate("xls");
    l_str_FileFilter = StrConcat4(i_str_fileFormat, Translate(" files allowed|*."), Translate("*"), Translate(""));
    {
      loopCounter2 = 0;
      while (1 == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        if (i_str_SoundFilePath != "")
        {
          VectorCustomDialogs::ActivateSoundForNextDialog(i_str_SoundFilePath, i_int_SoundLoop);
        }
        l_intReturnDisplayDialog = VectorCustomDialogs::FileBrowserDialog(Translate("                                                                                                                                                                                                        "), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, Translate("Please select Input File Worklist"), VectorCustomDialogs::FileBrowserDialog::DialogType::Open, l_str_FileFilter, 1, Translate(""), o_str_FileWorklistFullPath);
        l_str_FileExtension = HSLExtensions::File::GetFileExtension(o_str_FileWorklistFullPath);
        t_strDirectoryName = HSLExtensions::File::GetDirectoryName(o_str_FileWorklistFullPath);
        Trace("l_intReturnDisplayDialog : ",l_intReturnDisplayDialog);
        if (l_intReturnDisplayDialog == 2)
        {
          DisplayDialog_Error(Translate("Abort command requested by user"), Translate(""), 0, Translate(""), 0);
        }
        else
        {
          if (o_str_FileWorklistFullPath == "")
          {
            l_strErrorMessage = StrConcat4(Translate("Error during previous selection of a worklist "), Translate("Select again a worklist - "), Translate("Trial : "), loopCounter2);
            DisplayDialog_Warning(l_strErrorMessage, Translate(""), 0, Translate(""), 0);
          }
          else
          {
            t_str_InputWorklistFilePath = o_str_FileWorklistFullPath;
            break;
          }
        }
      }
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _Add_ContainerToRack( device & i_MLSTAR, variable i_strLabwareID, variable i_intPositionID, variable i_intNumberOfTubes, variable i_strConfigFile, variable i_intXOffset, variable i_intYOffset, variable i_intZOffset ) void {
    private variable l_strPositionID;
    private variable loopCounter1;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    {
      for(loopCounter1 = 0; loopCounter1 < i_intNumberOfTubes;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_strPositionID = StrIStr(i_intPositionID);
        DevAddContainerToRack(i_MLSTAR, i_strLabwareID, l_strPositionID, i_strConfigFile, i_intXOffset, i_intYOffset, i_intZOffset);
        i_intPositionID = i_intPositionID + 1;
      }
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
  }

  function DisplayDialog_SelectEmailAddress( variable & o_str_EmailAddress, variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable {
    private variable l_bln_DisplayDialog;
    private variable l_intReturnDisplayDialog;
    private variable l_int_LengthString;
    private variable loopCounter1;
    private variable l_int_StrFindCharacter;
    private variable l_arr_DataTypes[];
    private variable l_arr_Result[];
    private variable l_arr_ListLabels[];
    private variable l_arr_ListUnits[];
    private variable l_arr_ListValues[];
    private variable l_arr_CustomToolTip[];
    private variable l_arr_Ranges[];
    o_str_EmailAddress = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    l_arr_CustomToolTip.SetSize(0);
    l_arr_DataTypes.SetSize(0);
    l_arr_CustomToolTip.SetSize(0);
    l_arr_ListLabels.SetSize(0);
    l_arr_ListUnits.SetSize(0);
    l_arr_ListValues.SetSize(0);
    l_arr_Ranges.SetSize(0);
    l_arr_Result.SetSize(0);
    l_bln_DisplayDialog = ASWGLOBAL::BOOL::TRUE;
    l_arr_CustomToolTip.AddAsLast(Translate("e-mail Address ###@###.com"));
    l_arr_DataTypes.AddAsLast(2);
    l_arr_ListLabels.AddAsLast(Translate("String"));
    l_arr_ListUnits.AddAsLast(Translate("e-mail address"));
    l_arr_ListValues.AddAsLast(Translate(""));
    l_arr_Ranges.AddAsLast(Translate("0|100"));
    {
      loopCounter1 = 0;
      while (l_bln_DisplayDialog == ASWGLOBAL::BOOL::TRUE)
      {
        loopCounter1 = loopCounter1 + 1;
        if (i_str_SoundFilePath != "")
        {
          VectorCustomDialogs::ActivateSoundForNextDialog(i_str_SoundFilePath, i_int_SoundLoop);
        }
        l_intReturnDisplayDialog = VectorCustomDialogs::InputDialog(Translate(""), VectorCustomDialogs::ButtonType::Ok, 0, 0, Translate("Enter email address to receive e-mails, otherwise leave it empty"), Translate("Press OK to Continue"), l_arr_ListLabels, l_arr_ListValues, l_arr_ListUnits, l_arr_DataTypes, l_arr_Ranges, l_arr_CustomToolTip, l_arr_Result);
        o_str_EmailAddress=l_arr_Result.GetAt(1-1);
        l_int_LengthString = StrGetLength(o_str_EmailAddress);
        if (l_int_LengthString > 0)
        {
          l_int_StrFindCharacter = StrFind(o_str_EmailAddress, Translate("@"));
          if (l_int_StrFindCharacter <= 0)
          {
            l_bln_DisplayDialog = ASWGLOBAL::BOOL::TRUE;
          }
          else
          {
            l_bln_DisplayDialog = ASWGLOBAL::BOOL::FALSE;
          }
          if (l_bln_DisplayDialog == ASWGLOBAL::BOOL::TRUE)
          {
            DisplayDialog_Warning(Translate("Wrong format for e-mail address. Please include a valid e-mail address"), Translate(""), 15, Translate(""), 0);
          }
        }
        else
        {
          l_bln_DisplayDialog = ASWGLOBAL::BOOL::FALSE;
        }
      }
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _GetAllDeckSequences( device & i_instrument, sequence & o_arr_sequences[], variable & o_arr_sequenceNames[] ) void {
    o_arr_sequences.SetSize( 0);
    o_arr_sequenceNames.SetSize( 0);
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    o_arr_sequenceNames.SetSize(0);
    o_arr_sequences.SetSize(0);
    {
         object objDeckLayout;
         //object objLabware;
         object objEditDeckLayout8;
         object objSequenceNames;
         variable i;
         sequence tmpSeq;
         objDeckLayout = i_instrument.GetDeckLayoutObject();
         if(!objDeckLayout.IsNull())
         {
              objDeckLayout.GetObject("IEditDeckLayout8", objEditDeckLayout8);
              objEditDeckLayout8.DeckSequenceNames(objSequenceNames);
              for(i=1; i<=objSequenceNames.Count; i++){
                   o_arr_sequenceNames.AddAsLast(objSequenceNames.Item(i));
                   DevGetSequence(i_instrument, objSequenceNames.Item(i), tmpSeq);
                   o_arr_sequences.AddAsLast(tmpSeq);
              }
         }
         objDeckLayout.ReleaseObject();
         objEditDeckLayout8.ReleaseObject();
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
  }

  function Deck_Visualize( device & ML_STAR, variable i_Labware_ID, variable i_State ) variable {
    private variable arr_labware_state[];
    private variable arr_labware[];
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    arr_labware.SetSize(0);
    arr_labware_state.SetSize(0);
    arr_labware.AddAsLast(i_Labware_ID);
    arr_labware_state.AddAsLast(i_State);
    DeckVisualize::UpdateLoadedLabware(ML_STAR, arr_labware, arr_labware_state, Translate("Apply state to labware"));
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _Sort2ArraysByNumericAscendingOrder( variable & io_array1[], variable & io_array2[] ) void {
    private variable l_blnSortResult;
    private variable l_variable_type;
    private variable l_intSizeArr1;
    private variable l_intSizeArr2;
    private variable l_intReturnIndex;
    private variable loopCounter2;
    private variable l_intContinueSorting;
    private variable l_arr2SortAsc[];
    private variable l_arr1SortAsc[];
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    l_intSizeArr1=io_array1.GetSize();
    l_intSizeArr2=io_array2.GetSize();
    TRACELEVEL::TraceArraysFaceToFace(t_intGetTraceLevel, Translate("Before sorting"), Translate(""), io_array1, io_array2);
    l_variable_type = StrGetType(io_array1.ElementAt( 1 -1));
    if (l_intSizeArr1 != l_intSizeArr2)
    {
      l_intContinueSorting = 0;
    }
    else
    {
      l_intContinueSorting = 1;
    }
    l_arr1SortAsc.SetSize(0);
    l_arr2SortAsc.SetSize(0);
    if (l_variable_type == "s")
    {
      MECC::TraceComment(Translate(" --------------- array cannot be sorted in ascending mode acording to numeric characters because input reference array contains strings"));
      l_intContinueSorting = 0;
    }
    if (l_intContinueSorting == 1)
    {
      l_arr1SortAsc = HSLExtensions::Array::Sort(io_array1, 1, l_blnSortResult);
      if (l_blnSortResult != 1)
      {
        MECC::TraceComment(Translate(" --------------- array cannot be sorted in ascending mode"));
      }
      else
      {
        {
          for(loopCounter2 = 0; loopCounter2 < l_intSizeArr1;)
          {
            loopCounter2 = loopCounter2 + 1;
            l_intReturnIndex = ARRAYTOOLS::Lookup(io_array1, l_arr1SortAsc.ElementAt( loopCounter2 -1));
            l_arr2SortAsc.AddAsLast(io_array2.ElementAt( l_intReturnIndex -1));
          }
        }
      }
      io_array1.SetSize(0);
      io_array2.SetSize(0);
      io_array1=l_arr1SortAsc;
      io_array2=l_arr2SortAsc;
    }
    else
    {
      io_array1=io_array1;
      io_array2=io_array2;
    }
    TRACELEVEL::TraceArraysFaceToFace(t_intGetTraceLevel, Translate("After sorting"), Translate(""), io_array1, io_array2);
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
  }

  private function _Calculate_TotalVolumeRequiredForThisLiquidFromFile( variable i_strLiquidName, variable i_strLiquidType, variable & o_fltTotalVolumeRequired, variable & o_arr_fltTotalVolumeRequired[] ) void {
    private variable l_strSQLSentence;
    private variable l_str_FunctionName;
    private variable l_fltTotalVolumeRequired;
    private variable loopCounter1;
    private variable l_arr_TotalVolumeRequired[];
    o_fltTotalVolumeRequired = 0;
    o_arr_fltTotalVolumeRequired.SetSize( 0);
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    o_fltTotalVolumeRequired = 0.0;
    l_fltTotalVolumeRequired = 0.0;
    l_arr_TotalVolumeRequired.SetSize(0);
    if (i_strLiquidType == t_strType_MastermixComponent)
    {
      l_str_FunctionName = GetFunctionName();
      l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_MasterMixComponentName] = '",i_strLiquidName,"'","","","","","","","","","");
      Trace(l_strSQLSentence);
    }
    else
    {
      l_str_FunctionName = GetFunctionName();
      l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_Name] = '",i_strLiquidName,"'","","","","","","","","","");
      Trace(l_strSQLSentence);
    }
    _FileOpenRunData(l_strSQLSentence, 1);
    {
      loopCounter1 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_fltTotalVolumeRequired = l_fltTotalVolumeRequired + file_RunData_DB_VolumePerWell;
        l_fltTotalVolumeRequired = l_fltTotalVolumeRequired + file_RunData_DB_ExtraVolume;
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    o_arr_fltTotalVolumeRequired.AddAsLast(l_fltTotalVolumeRequired);
    o_fltTotalVolumeRequired = l_fltTotalVolumeRequired;
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("o_fltTotalVolumeRequired: "), o_fltTotalVolumeRequired);
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return;
  }

  function Add_LabwareForCurrentProcess( device & ML_STAR, variable i_str_LabwareName, variable i_str_LabwareDescription, variable i_int_NumberOfUnits, sequence & i_seqTemplate, variable i_var_PositionInSequence ) variable {
    private variable l_intReturnValueFindSubString;
    private variable l_str_LabwareId_SeqTemplate;
    private variable l_int_ReturnSearch_TubeCarriers;
    private variable l_str_ConcatLabwareTypeAndName;
    private variable l_intReturnSearchStr;
    private variable l_str_FilePathConfigFile;
    private variable l_str_SiteID_long;
    private variable l_str_LabwareDescription;
    private variable l_str_CarrierID;
    private variable l_intReturnValueFindSubString_PLT_TIP1000;
    private variable l_int_NumberOfTubePositionsDetected;
    private variable l_int_RecordCounter;
    private variable l_str_sequenceName;
    private variable l_str_LabwareViewName;
    private variable l_int_NumberOfLabwareIds;
    private variable l_int_TrackNumber;
    private variable l_int_NumberOfCarriers;
    private variable l_str_SiteID;
    private variable loopCounter1;
    private variable l_str_SQLSentence;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable l_str_PositionIDs_Sorted;
    private variable loopCounter4;
    private variable l_int_NumberOfSitesPerCarrier;
    private variable l_int_MaxNumberOfSites;
    private variable loopCounter5;
    private variable l_bln_ArraySorted;
    private variable l_int_AdditionToUnits;
    private variable l_int_TipType;
    private variable l_arr_str_SortedPositions[];
    private variable l_arr_seqTemplateLabwareIds[];
    private variable l_arr_strTokens[];
    private variable l_arr_strSiteNamesForThisCarrier_Distinct[];
    private variable l_arr_strCarrierName_Distinct[];
    private variable l_arr_strSiteNames[];
    private variable l_arr_strSiteNamesForThisCarrier[];
    private variable l_arr_strCarrierName[];
    private variable l_str_LabwareFileName;
    private variable l_arr_strLabIds[];
    private variable l_str_ContainerDescription;
    private variable l_str_ContainerViewName;
    private variable loopCounter6;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(t_strFunctionName, i_int_NumberOfUnits, Translate("i_int_NumberOfUnits"), Translate("i"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(t_strFunctionName, i_str_LabwareDescription, Translate("i_str_LabwareDescription"), Translate("s"), ASWGLOBAL::BOOL::TRUE);
    _CheckPoint_Variable_Type(t_strFunctionName, i_str_LabwareName, Translate("i_str_LabwareName"), Translate("s"), ASWGLOBAL::BOOL::TRUE);
    _CheckPoint_Variable_Type(t_strFunctionName, i_var_PositionInSequence, Translate("i_var_PositionInSequence"), Translate("i"), ASWGLOBAL::BOOL::FALSE);
    _Reset_FileRunData_Variables();
    if (i_int_NumberOfUnits != 0)
    {
      l_str_SQLSentence = Translate("");
      if (i_var_PositionInSequence != 0)
      {
        i_seqTemplate.SetCurrentPosition(i_var_PositionInSequence);
      }
      else
      {
        i_var_PositionInSequence = i_seqTemplate.GetCurrentPosition();
      }
      l_str_sequenceName = SeqGetName(i_seqTemplate);
      file_RunData_DB_SequenceName = l_str_sequenceName;
      l_str_LabwareId_SeqTemplate = SeqGetLabwareId(i_seqTemplate);
      SeqGetLabwareIds(i_seqTemplate, l_arr_strLabIds);
      l_int_MaxNumberOfSites=l_arr_strLabIds.GetSize();
      _GetCarrierAndSiteID(ML_STAR, l_str_LabwareId_SeqTemplate, l_str_CarrierID, l_str_SiteID, l_int_TrackNumber);
      l_intReturnSearchStr = StrFind(l_str_SiteID, Translate("T-"));
      if (l_intReturnSearchStr >= 0)
      {
        LPQ::CONT_GetConfigFile(ML_STAR, i_seqTemplate, l_str_FilePathConfigFile);
      }
      else
      {
        LPQ::LABWARE_GetConfigFile(ML_STAR, i_seqTemplate, l_str_FilePathConfigFile);
      }
      t_arr_str_Labware_FilePath.AddAsLast(l_str_FilePathConfigFile);
      l_str_LabwareFileName = HSLExtensions::File::GetFileNameWithoutExtension(l_str_FilePathConfigFile);
      if (i_str_LabwareDescription == "")
      {
        LPQ::LABWARE_GetDescription(ML_STAR, i_seqTemplate, l_str_LabwareDescription);
      }
      else
      {
        l_str_LabwareDescription = i_str_LabwareDescription;
      }
      t_arr_str_Labware_Description.AddAsLast(l_str_LabwareDescription);
      if (i_str_LabwareName == "")
      {
        LPQ::LABWARE_GetLabwareViewName(ML_STAR, i_seqTemplate, l_str_LabwareViewName);
      }
      else
      {
        l_str_LabwareViewName = i_str_LabwareName;
      }
      t_arr_str_Labware_ViewName.AddAsLast(l_str_LabwareViewName);
      t_arr_strTemplateIds.AddAsLast(l_str_CarrierID);
      LPQ::CONT_GetDescription(ML_STAR, i_seqTemplate, i_var_PositionInSequence, l_str_ContainerDescription);
      t_arr_strContainerDescription.AddAsLast(l_str_ContainerDescription);
      LPQ::CONT_GetViewName(ML_STAR, i_seqTemplate, i_var_PositionInSequence, l_str_ContainerViewName);
      t_arr_strContainerViewName.AddAsLast(l_str_ContainerViewName);
      file_RunData_DB_ContainerDescription = l_str_ContainerDescription;
      file_RunData_DB_ContainerViewName = l_str_ContainerViewName;
      file_RunData_DB_AddToDialog = ASWGLOBAL::BOOL::TRUE;
      l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_LabwareFileName] = '",l_str_LabwareFileName,"' AND [DB_LabwareName] = '",i_str_LabwareName,"' AND [DB_LabwareDescription] = '",i_str_LabwareDescription,"'","","","","","");
      Trace(l_str_SQLSentence);
      //l_str_SQLSentence = StrConcat12("","","","","","","","","","","","");
      if(0){
        l_str_SQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_LabwareFileName] = '",l_str_LabwareFileName,"' AND [DB_LabwareName] = '",i_str_LabwareName,"'","","","","","","","");
        Trace(l_str_SQLSentence);
        //l_str_SQLSentence = StrConcat12("","","","","","","","","","","","");
      }
      l_int_RecordCounter = 0;
      l_int_AdditionToUnits = 0;
      _FileOpenRunData(l_str_SQLSentence, 1);
      {
        loopCounter1 = 0;
        while (
           (file_RunData.Eof() == 0)
        )
        {
          loopCounter1 = loopCounter1 + 1;
          if( 0 == file_RunData.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          l_int_RecordCounter = l_int_RecordCounter + 1;
        }
      }
      if( 0 != file_RunData.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file_RunData.RemoveFields();
      l_str_sequenceName = SeqGetName(i_seqTemplate);
      file_RunData_DB_SequenceName = l_str_sequenceName;
      if (l_int_RecordCounter > 0)
      {
        MECC::TraceComment(Translate("These values ARE PRESENT in File"));
        l_int_AdditionToUnits = file_RunData_DB_Units + i_int_NumberOfUnits;
        l_int_ReturnSearch_TubeCarriers = StrFind(l_str_SiteID, Translate("T-"));
        if (l_int_ReturnSearch_TubeCarriers >= 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Searching for string T-  resulted TRUE"), Translate(""));
          file_RunData_DB_PositionID = StrConcat12(file_RunData_DB_PositionID, Translate(","), i_var_PositionInSequence, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_PositionID: "), file_RunData_DB_PositionID);
          STRTOKENIZE::StrTokenize(file_RunData_DB_PositionID, Translate(","), l_arr_strTokens, ASWGLOBAL::BOOL::FALSE);
          l_arr_str_SortedPositions = HSLExtensions::Array::Sort(l_arr_strTokens, 1, l_bln_ArraySorted);
          if (l_bln_ArraySorted == ASWGLOBAL::BOOL::TRUE)
          {
            l_str_PositionIDs_Sorted = Translate("");
            l_int_NumberOfTubePositionsDetected=l_arr_str_SortedPositions.GetSize();
            {
              for(loopCounter5 = 0; loopCounter5 < l_int_NumberOfTubePositionsDetected;)
              {
                loopCounter5 = loopCounter5 + 1;
                if (loopCounter5 == 1)
                {
                  l_str_PositionIDs_Sorted = StrConcat12(l_str_PositionIDs_Sorted, Translate(""), l_arr_str_SortedPositions.ElementAt( loopCounter5 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                }
                else
                {
                  l_str_PositionIDs_Sorted = StrConcat12(l_str_PositionIDs_Sorted, Translate(","), l_arr_str_SortedPositions.ElementAt( loopCounter5 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                }
              }
            }
          }
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_str_PositionIDs_Sorted: "), l_str_PositionIDs_Sorted);
          l_str_SQLSentence = StrConcat12("UPDATE [RunData$] SET [DB_Units] = ", l_int_AdditionToUnits,", [DB_PositionID] = '",l_str_PositionIDs_Sorted,"' WHERE [DB_LabwareFileName] = '",l_str_LabwareFileName,"' AND [DB_LabwareName] = '",i_str_LabwareName,"' AND [DB_LabwareDescription] = '",l_str_LabwareDescription,"'","");
          Trace(l_str_SQLSentence);
          //l_str_SQLSentence = StrConcat12("","","","","","","","","","","","");
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Searching for string T-  resulted FALSE"), Translate(""));
          l_str_SQLSentence = StrConcat12("UPDATE [RunData$] SET [DB_Units] = ", l_int_AdditionToUnits," WHERE [DB_LabwareFileName] = '",l_str_LabwareFileName,"' AND [DB_LabwareName] = '",i_str_LabwareName,"' AND [DB_LabwareDescription] = '",l_str_LabwareDescription,"'","","","");
          Trace(l_str_SQLSentence);
          //l_str_SQLSentence = StrConcat12("","","","","","","","","","","","");
        }
        _FileOpenRunData(l_str_SQLSentence, 1);
        if( 0 != file_RunData.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file_RunData.RemoveFields();
      }
      else
      {
        MECC::TraceComment(Translate("These values ARE NOT PRESENT in File"));
        SeqGetLabwareIds(i_seqTemplate, l_arr_seqTemplateLabwareIds);
        l_int_NumberOfLabwareIds=l_arr_seqTemplateLabwareIds.GetSize();
        l_arr_strCarrierName.SetSize(0);
        {
          for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfLabwareIds;)
          {
            loopCounter2 = loopCounter2 + 1;
            _GetCarrierAndSiteID(ML_STAR, l_arr_seqTemplateLabwareIds.ElementAt( loopCounter2 -1), l_str_CarrierID, l_str_SiteID, l_int_TrackNumber);
            l_arr_strCarrierName.AddAsLast(l_str_CarrierID);
            l_arr_strSiteNames.AddAsLast(l_str_SiteID);
            l_int_ReturnSearch_TubeCarriers = StrFind(l_str_SiteID, Translate("T-"));
          }
        }
        ARRAYTOOLS::get_distinct_from_array(l_arr_strCarrierName, l_arr_strCarrierName_Distinct);
        l_int_NumberOfCarriers=l_arr_strCarrierName_Distinct.GetSize();
        {
          for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfCarriers;)
          {
            loopCounter3 = loopCounter3 + 1;
            ARRAYTOOLS::ArrayVLookUp(l_arr_strSiteNames, l_arr_strCarrierName, l_arr_strCarrierName_Distinct.ElementAt( loopCounter3 -1), l_arr_strSiteNamesForThisCarrier);
            ARRAYTOOLS::get_distinct_from_array(l_arr_strSiteNamesForThisCarrier, l_arr_strSiteNamesForThisCarrier_Distinct);
            Util2::Debug::TraceArray(Translate("l_arr_strSiteNamesForThisCarrier_Distinct: "), l_arr_strSiteNamesForThisCarrier_Distinct);
            l_int_NumberOfSitesPerCarrier=l_arr_strSiteNamesForThisCarrier_Distinct.GetSize();
            {
              for(loopCounter6 = 0; loopCounter6 < l_int_NumberOfSitesPerCarrier;)
              {
                loopCounter6 = loopCounter6 + 1;
                file_RunData_DB_CarrierName = l_arr_strCarrierName_Distinct.ElementAt( loopCounter3 -1);
                file_RunData_DB_TrackNumber = l_int_TrackNumber;
                file_RunData_DB_SiteID = l_arr_strSiteNamesForThisCarrier_Distinct.ElementAt( loopCounter6 -1);
                file_RunData_DB_Type = Translate("LabwareResource");
                if (i_str_LabwareName == "")
                {
                  if (l_str_LabwareViewName == "")
                  {
                    file_RunData_DB_LabwareName = l_str_sequenceName;
                  }
                  else
                  {
                    file_RunData_DB_LabwareName = l_str_LabwareViewName;
                  }
                }
                else
                {
                  file_RunData_DB_LabwareName = i_str_LabwareName;
                }
                file_RunData_DB_Name = l_str_LabwareViewName;
                file_RunData_DB_LabwareDescription = l_str_LabwareDescription;
                file_RunData_DB_LabwareFileName = l_str_LabwareFileName;
                file_RunData_DB_Description = l_str_LabwareDescription;
                if(0){
                  if (l_str_LabwareFileName == i_str_LabwareName)
                  {
                    file_RunData_DB_Description = i_str_LabwareName;
                  }
                  else
                  {
                    if (l_str_LabwareViewName == "")
                    {
                      l_str_ConcatLabwareTypeAndName = StrConcat12(l_str_LabwareFileName, Translate(" ("), i_str_LabwareName, Translate(")"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    }
                    else
                    {
                      l_str_ConcatLabwareTypeAndName = StrConcat12(l_str_LabwareFileName, Translate(" ("), l_str_LabwareViewName, Translate(")"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    }
                    file_RunData_DB_Description = l_str_ConcatLabwareTypeAndName;
                  }
                }
                if (loopCounter6 == 1&& loopCounter3 == 1)
                {
                  file_RunData_DB_Units = i_int_NumberOfUnits;
                }
                else
                {
                  file_RunData_DB_Units = 0;
                }
                l_str_SiteID_long = Translate("");
                if (l_int_ReturnSearch_TubeCarriers >= 0)
                {
                  file_RunData_DB_PositionID = i_var_PositionInSequence;
                }
                else
                {
                  {
                    for(loopCounter4 = 0; loopCounter4 < l_int_NumberOfSitesPerCarrier;)
                    {
                      loopCounter4 = loopCounter4 + 1;
                      if (loopCounter4 == l_int_NumberOfSitesPerCarrier)
                      {
                        l_str_SiteID_long = StrConcat12(l_str_SiteID_long, l_arr_strSiteNamesForThisCarrier_Distinct.ElementAt( loopCounter4 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                      }
                      else
                      {
                        l_str_SiteID_long = StrConcat12(l_str_SiteID_long, l_arr_strSiteNamesForThisCarrier_Distinct.ElementAt( loopCounter4 -1), Translate(","), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                      }
                    }
                  }
                  l_intReturnValueFindSubString = StrFind(l_arr_strCarrierName_Distinct.ElementAt( loopCounter3 -1), Translate("TIP"));
                  if (l_intReturnValueFindSubString >= 0)
                  {
                    l_intReturnValueFindSubString_PLT_TIP1000 = StrFind(l_arr_strCarrierName_Distinct.ElementAt( loopCounter3 -1), Translate("Tip_Plate_Magnet"));
                    if (l_intReturnValueFindSubString_PLT_TIP1000 >= 0)
                    {
                      file_RunData_DB_PositionID = l_str_SiteID_long;
                    }
                    else
                    {
                      if (l_int_TipType != -1)
                      {
                        file_RunData_DB_PositionID = StrConcat12(Translate("1 - "), l_int_MaxNumberOfSites, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                      }
                      else
                      {
                        file_RunData_DB_SiteID = l_str_LabwareFileName;
                      }
                    }
                  }
                  else
                  {
                    file_RunData_DB_PositionID = l_str_SiteID_long;
                  }
                }
                _FileOpenRunData(Translate(""), 2);
                if( 0 == file_RunData.WriteRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if( 0 != file_RunData.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                file_RunData.RemoveFields();
              }
            }
          }
        }
        l_arr_strSiteNames.SetSize(0);
      }
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _Reformat_VolumesForDialog( variable i_flt_valueToReformat, variable i_str_units, variable & o_str_valueFormatted ) void {
    private variable str_io_strValueToReformat;
    private variable l_strVariableType;
    private variable l_str_FunctionName;
    private variable l_intTopVolume;
    private variable intStrFindResult;
    private variable l_int_NumberOfDecimalPoints;
    o_str_valueFormatted = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_flt_valueToReformat, Translate("i_flt_valueToReformat"), Translate("if"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_str_units, Translate("i_str_units"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    l_strVariableType = StrGetType(i_flt_valueToReformat);
    if (i_str_units == "uL")
    {
      l_intTopVolume = 3000;
    }
    else
    {
      if (i_str_units == "mL")
      {
        l_intTopVolume = 3;
      }
      else
      {
        DisplayDialog_Error(Translate("Units for this volume are not defined. Please enter mL for mililiters or uL for microliters"), Translate(""), 15, Translate(""), 0);
      }
    }
    if (i_flt_valueToReformat <= l_intTopVolume)
    {
      l_int_NumberOfDecimalPoints = 2;
    }
    else
    {
      l_int_NumberOfDecimalPoints = 2;
    }
    i_flt_valueToReformat = MthRound(i_flt_valueToReformat, l_int_NumberOfDecimalPoints);
    str_io_strValueToReformat = StrConcat2(Translate(""), i_flt_valueToReformat);
    intStrFindResult = StrFind(str_io_strValueToReformat, Translate("."));
    if (intStrFindResult != -1)
    {
      intStrFindResult = intStrFindResult + l_int_NumberOfDecimalPoints;
      o_str_valueFormatted = StrLeft(str_io_strValueToReformat, intStrFindResult);
    }
    else
    {
      o_str_valueFormatted = str_io_strValueToReformat;
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return;
  }

  function Get_NumberOfUnits_ByLabwareName( variable i_str_LabwareName, variable i_str_CarrierName, variable & o_int_NumberOfUnits ) variable {
    private variable l_strSQLSentence;
    private variable loopCounter1;
    private variable l_str_FunctionName;
    o_int_NumberOfUnits = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_str_LabwareName, Translate("i_str_LabwareName"), Translate("s"), ASWGLOBAL::BOOL::FALSE);
    _CheckPoint_Variable_Type(l_str_FunctionName, i_str_CarrierName, Translate("i_str_CarrierName"), Translate("s"), ASWGLOBAL::BOOL::TRUE);
    l_strSQLSentence = Translate("");
    o_int_NumberOfUnits = 0;
    if (i_str_CarrierName == "")
    {
      l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_LabwareName] = '",i_str_LabwareName,"'","","","","","","","","","");
    }
    else
    {
      l_strSQLSentence = StrConcat12("SELECT * FROM [RunData$] WHERE [DB_LabwareName] = '",i_str_LabwareName,"' AND [DB_CarrierName] = '",i_str_CarrierName,"'","","","","","","","");
    }
    _FileOpenRunData(l_strSQLSentence, 1);
    {
      loopCounter1 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        o_int_NumberOfUnits = o_int_NumberOfUnits + file_RunData_DB_Units;
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("i_str_LabwareName: "), i_str_LabwareName, Translate("   i_str_CarrierName: "), i_str_CarrierName, Translate("   o_int_NumberOfUnits: "), o_int_NumberOfUnits);
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _Calculate_NumberOfContainersAndVolumePerContainer_ByTotalVolume( variable i_strReagentName, variable i_fltTotalVolume, variable i_fltDeadVolumeLabware, variable i_fltDeadVolumeLiquid, variable i_fltMaximumVolumePerContainer, variable i_intNumberOfContainersRequired, variable & o_intNumberOfContainers, variable & o_arr_fltVolumePerContainer[], variable & o_fltTotalVolumeNeeded ) void {
    private variable l_fltRawVolumeRequired;
    private variable l_fltDeadVolumePercentage;
    private variable l_intIndexArrVolumeTubes;
    private variable l_fltVolumeExceeded;
    private variable l_intMaxVolumePerContainer;
    private variable l_blnShowDialog;
    private variable l_fltDeadVolumeContainer;
    private variable l_fltCompleteNumber;
    private variable l_fltTransferVolumeRecalculated;
    private variable l_fltTransferVolume;
    private variable l_fltVolumeExceededTotal;
    private variable l_intMinimumNumberOfContainer;
    private variable l_fltTotalVolumeRequired;
    private variable l_fltCurrentVolumeToBeAdded;
    private variable loopCounter2;
    private variable l_intCompleteNumber;
    private variable l_fltDeadVolumeLiquid;
    private variable l_blnForceLoopBreak;
    private variable l_intRest;
    private variable l_intIncreaseNumberOfContainersBy;
    private variable l_fltTotalDeadVolumeRequired;
    private variable l_arr_fltVolumesMerged[];
    private variable l_arrTubeVolume[];
    private variable l_intNumberOfSamplesFromFile;
    o_intNumberOfContainers = 0;
    o_arr_fltVolumePerContainer.SetSize( 0);
    o_fltTotalVolumeNeeded = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    l_fltTransferVolume = i_fltTotalVolume;
    l_fltDeadVolumeContainer = i_fltDeadVolumeLabware;
    l_intMaxVolumePerContainer = i_fltMaximumVolumePerContainer;
    l_intMinimumNumberOfContainer = i_intNumberOfContainersRequired;
    l_fltTotalDeadVolumeRequired = 0.0;
    l_fltRawVolumeRequired = i_fltTotalVolume;
    l_intNumberOfSamplesFromFile = 1;
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_fltTransferVolume: "), l_fltTransferVolume);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_fltDeadVolumeContainer : "), l_fltDeadVolumeContainer);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("i_fltDeadVolumeLiquid : "), i_fltDeadVolumeLiquid);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_intMaxVolumePerContainer : "), l_intMaxVolumePerContainer);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_intMinimumNumberOfContainer - requested : "), l_intMinimumNumberOfContainer);
    if (i_fltTotalVolume <= i_fltMaximumVolumePerContainer)
    {
      l_intMinimumNumberOfContainer = 1;
      TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_intMinimumNumberOfContainer - allowed : "), l_intMinimumNumberOfContainer);
    }
    l_fltDeadVolumeLiquid = i_fltDeadVolumeLiquid / (100 * 1.0);
    l_fltDeadVolumePercentage = l_fltTransferVolume * l_fltDeadVolumeLiquid;
    l_fltTransferVolumeRecalculated = l_fltTransferVolume + l_fltDeadVolumePercentage;
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_fltTransferVolumeRecalculated (including dead volume liquid) : "), l_fltTransferVolumeRecalculated);
    l_blnForceLoopBreak = 0;
    l_blnShowDialog = 0;
    if (l_intMinimumNumberOfContainer == 0)
    {
      l_blnShowDialog = 1;
      l_intMinimumNumberOfContainer = 1;
    }
    {
      loopCounter2 = 0;
      while (1 == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        l_fltTotalVolumeRequired = 0;
        l_arrTubeVolume.SetSize(0);
        l_fltCompleteNumber = l_intNumberOfSamplesFromFile / (l_intMinimumNumberOfContainer * 1.0);
        l_intCompleteNumber = MthFloor(l_fltCompleteNumber);
        l_intRest = l_intNumberOfSamplesFromFile % l_intMinimumNumberOfContainer;
        l_fltVolumeExceededTotal = 0;
        {
          for(l_intIndexArrVolumeTubes = 0; l_intIndexArrVolumeTubes < l_intMinimumNumberOfContainer;)
          {
            l_intIndexArrVolumeTubes = l_intIndexArrVolumeTubes + 1;
            if (l_intIndexArrVolumeTubes <= l_intRest)
            {
              l_fltCurrentVolumeToBeAdded = l_intCompleteNumber * l_fltTransferVolumeRecalculated;
              l_fltCurrentVolumeToBeAdded = l_fltCurrentVolumeToBeAdded + l_fltTransferVolumeRecalculated;
            }
            else
            {
              l_fltCurrentVolumeToBeAdded = l_intCompleteNumber * l_fltTransferVolumeRecalculated;
            }
            l_fltCurrentVolumeToBeAdded = l_fltCurrentVolumeToBeAdded + l_fltDeadVolumeContainer;
            if (l_fltCurrentVolumeToBeAdded > l_intMaxVolumePerContainer)
            {
              l_fltVolumeExceeded = l_fltCurrentVolumeToBeAdded - l_intMaxVolumePerContainer;
              l_fltVolumeExceededTotal = l_fltVolumeExceededTotal + l_fltVolumeExceeded;
              l_intIncreaseNumberOfContainersBy = l_fltVolumeExceededTotal / (l_intMaxVolumePerContainer * 1.0);
              l_intIncreaseNumberOfContainersBy = MthCeiling(l_intIncreaseNumberOfContainersBy);
              if (l_intIncreaseNumberOfContainersBy == 0)
              {
                l_blnForceLoopBreak = 1;
              }
            }
            else
            {
              if (l_fltVolumeExceededTotal == 0)
              {
                l_blnForceLoopBreak = 1;
              }
            }
            l_arrTubeVolume.AddAsLast(l_fltCurrentVolumeToBeAdded);
            l_fltTotalVolumeRequired = l_fltTotalVolumeRequired + l_fltCurrentVolumeToBeAdded;
            if (l_fltCompleteNumber == 1)
            {
              if (l_intRest == 0)
              {
                l_blnForceLoopBreak = 1;
              }
            }
          }
        }
        TRACELEVEL::TraceArray(t_intGetTraceLevel, Translate("l_arrTubeVolume : "), l_arrTubeVolume);
        if (l_blnForceLoopBreak == 1)
        {
          break;
        }
        else
        {
          l_intMinimumNumberOfContainer = l_intMinimumNumberOfContainer + l_intIncreaseNumberOfContainersBy;
          TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_intMinimumNumberOfContainer - modified : "), l_intMinimumNumberOfContainer);
        }
      }
    }
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_intMinimumNumberOfContainer - automatic : "), l_intMinimumNumberOfContainer);
    l_fltTotalDeadVolumeRequired = l_fltTotalVolumeRequired - l_fltRawVolumeRequired;
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_fltRawVolumeRequired : "), l_fltRawVolumeRequired);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_fltTotalDeadVolumeRequired : "), l_fltTotalDeadVolumeRequired);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("l_fltTotalVolumeRequired : "), l_fltTotalVolumeRequired);
    o_intNumberOfContainers = l_intMinimumNumberOfContainer;
    ARRAYTOOLS::mergeArrays(t_arr_fltVolumes, l_arrTubeVolume, l_arr_fltVolumesMerged);
    t_arr_fltVolumes=l_arr_fltVolumesMerged;
    o_arr_fltVolumePerContainer=l_arrTubeVolume;
    o_fltTotalVolumeNeeded = l_fltTotalVolumeRequired;
    _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_DeadVolumeLabware"), i_fltDeadVolumeLabware, Translate("DB_Name"), i_strReagentName);
    _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_DeadVolumePercent"), i_fltDeadVolumeLiquid, Translate("DB_Name"), i_strReagentName);
    _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_TotalVolume"), l_fltTotalVolumeRequired, Translate("DB_Name"), i_strReagentName);
    _RunDATA_UpdateRecord(Translate("RunData"), Translate("DB_TotalDeadVolume"), l_fltTotalDeadVolumeRequired, Translate("DB_Name"), i_strReagentName);
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return;
  }

  function Terminate(  ) variable {
    private variable l_intNumberOfFiles;
    private variable loopCounter1;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    Util2::Debug::TraceArray(Translate("t_arr_strRunDataFilePaths: "), t_arr_strRunDataFilePaths);
    if(0){
      l_intNumberOfFiles=t_arr_strRunDataFilePaths.GetSize();
      {
        for(loopCounter1 = 0; loopCounter1 < l_intNumberOfFiles;)
        {
          loopCounter1 = loopCounter1 + 1;
          HSLExtensions::File::Delete(t_arr_strRunDataFilePaths.ElementAt( loopCounter1 -1));
        }
      }
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _GroupDataInDialog( variable & io_arrColumn1[], variable & io_arrColumn2[], variable & io_arrColumn3[], variable i_bln_add_additionalText ) void {
    private variable l_str_DescriptionsConcat;
    private variable l_int_TempValue_Column2;
    private variable l_int_Quantity;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable l_int_NumberOfDistinctElements;
    private variable l_int_NumberOfDistinctDescriptions;
    private variable loopCounter3;
    private variable l_str_Quantity;
    private variable l_int_NumberOfElements;
    private variable l_arr_TempDescriptions[];
    private variable l_arr_TempColumn1[];
    private variable l_arr_TempColumn2[];
    private variable l_arr_TempColumn3[];
    private variable l_arr_TempDescriptions_distinct[];
    private variable io_arrColumn1_distinct[];
    private variable l_int_PositionSeparatorX;
    private variable l_str_Description_Extracted;
    private variable l_int_NumberOfChDescription;
    private variable l_int_LengthEntrySecondColumn;
    private variable l_TypeTemp;
    private variable l_str_ElementAtColumn2;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    l_int_NumberOfElements=io_arrColumn1.GetSize();
    ARRAYTOOLS::get_distinct_from_array(io_arrColumn1, io_arrColumn1_distinct);
    l_int_NumberOfDistinctElements=io_arrColumn1_distinct.GetSize();
    l_arr_TempColumn1.SetSize(0);
    l_arr_TempColumn2.SetSize(0);
    l_arr_TempColumn3.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfDistinctElements;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_str_DescriptionsConcat = Translate("");
        l_arr_TempDescriptions.SetSize(0);
        l_int_Quantity = 0;
        l_str_ElementAtColumn2 = Translate("");
        l_arr_TempColumn1.AddAsLast(io_arrColumn1_distinct.ElementAt( loopCounter1 -1));
        {
          for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfElements;)
          {
            loopCounter2 = loopCounter2 + 1;
            if (io_arrColumn1.ElementAt( loopCounter2 -1) == io_arrColumn1_distinct.ElementAt( loopCounter1 -1))
            {
              l_TypeTemp = StrGetType(io_arrColumn2.ElementAt( loopCounter2 -1));
              if (l_TypeTemp != "i")
              {
                l_int_TempValue_Column2 = StrIVal(io_arrColumn2.ElementAt( loopCounter2 -1));
                l_str_ElementAtColumn2 = io_arrColumn2.ElementAt( loopCounter2 -1);
              }
              else
              {
                l_int_TempValue_Column2 = io_arrColumn2.ElementAt( loopCounter2 -1);
                l_str_ElementAtColumn2 = StrIStr(io_arrColumn2.ElementAt( loopCounter2 -1));
              }
              l_int_LengthEntrySecondColumn = StrGetLength(l_str_ElementAtColumn2);
              l_int_PositionSeparatorX = StrFind(l_str_ElementAtColumn2, Translate("x"));
              l_int_NumberOfChDescription = l_int_LengthEntrySecondColumn - l_int_PositionSeparatorX - 2;
              l_str_Description_Extracted = StrRight(l_str_ElementAtColumn2, l_int_NumberOfChDescription);
              TrcTrace12(Translate("l_int_LengthEntrySecondColumn: "), l_int_LengthEntrySecondColumn, Translate("   "), Translate("l_int_PositionSeparatorX: "), l_int_PositionSeparatorX, Translate("   "), Translate(""), Translate("io_arrColumn2[loopCounter2]: "), io_arrColumn2.ElementAt( loopCounter2 -1), Translate(""), Translate(""), Translate(""));
              l_int_Quantity = l_int_Quantity + l_int_TempValue_Column2;
              l_arr_TempDescriptions.AddAsLast(io_arrColumn3.ElementAt( loopCounter2 -1));
            }
          }
        }
        l_str_Quantity = StrIStr(l_int_Quantity);
        if (i_bln_add_additionalText == ASWGLOBAL::BOOL::TRUE)
        {
          l_str_Quantity = StrConcat12(l_str_Quantity, Translate(" x "), l_str_Description_Extracted, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        else
        {
          l_str_Quantity = l_int_Quantity;
        }
        l_str_Description_Extracted = Translate("");
        l_arr_TempColumn2.AddAsLast(l_str_Quantity);
        ARRAYTOOLS::get_distinct_from_array(l_arr_TempDescriptions, l_arr_TempDescriptions_distinct);
        l_int_NumberOfDistinctDescriptions=l_arr_TempDescriptions_distinct.GetSize();
        {
          for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfDistinctDescriptions;)
          {
            loopCounter3 = loopCounter3 + 1;
            if (loopCounter3 == 1)
            {
              l_str_DescriptionsConcat = StrConcat8(l_str_DescriptionsConcat, Translate(""), l_arr_TempDescriptions_distinct.ElementAt( loopCounter3 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            }
            else
            {
              l_str_DescriptionsConcat = StrConcat8(l_str_DescriptionsConcat, Translate("\n"), l_arr_TempDescriptions_distinct.ElementAt( loopCounter3 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            }
          }
        }
        l_arr_TempColumn3.AddAsLast(l_str_DescriptionsConcat);
        if (i_bln_add_additionalText == ASWGLOBAL::BOOL::TRUE)
        {
        }
        else
        {
        }
      }
    }
    io_arrColumn1=l_arr_TempColumn1;
    io_arrColumn2=l_arr_TempColumn2;
    io_arrColumn3=l_arr_TempColumn3;
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
  }

  private function _CheckSytemConnected( device & ML_STAR, variable & o_intPlatformType ) void {
    private variable l_strDeviceName;
    private variable l_strDeviceViewName;
    o_intPlatformType = 0;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    l_strDeviceName = DevGetInstrumentName(ML_STAR);
    l_strDeviceViewName = DevGetInstrumentViewName(ML_STAR);
    o_intPlatformType = 0;
    InstrumentTypeHelper::GetStarType(o_intPlatformType);
    TRACELEVEL::Trace_04(t_intGetTraceLevel, Translate("l_strDeviceName : "), l_strDeviceName, Translate(" - l_strDeviceViewName : "), l_strDeviceViewName);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate(" Platform type 0 = STARline; 1 = STARVline"), o_intPlatformType);
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
  }

  function DisplayDialog_Tips( variable i_strFilePath_MainImage, variable i_strTextMessage, variable i_int_Timeout, device & ML_STAR, variable i_str_SoundFilePath, variable i_int_SoundLoop ) variable {
    private variable l_str_LoadingPicturesFileDirectoryAndSmallImageName;
    private variable l_rtnFileExists;
    private variable l_strMessage;
    private variable l_str_FunctionName;
    private variable l_str_LoadingPicturesFileDirectoryAndImageName;
    private variable l_intReturnDisplayDialog;
    private variable l_strTopMessageDialog;
    private variable l_str_SQLSentence;
    private variable loopCounter2;
    private variable l_str_PLT_1000TIP_Positions;
    private variable l_arr_ColumnHeaders[];
    private variable l_arr_DataColumn1[];
    private variable l_arr_DataColumn2[];
    private variable l_arr_DataColumn3[];
    private variable l_str_RunData_DB_Units;
    private variable l_intReturnSearchValue;
    private variable l_str_FindTipInString;
    private variable l_intTotalUnits;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    TRACELEVEL::Trace_02(t_intGetTraceLevel, Translate("Loading dialog: "), Translate("Tips"));
    l_arr_DataColumn1.SetSize(0);
    l_arr_DataColumn2.SetSize(0);
    l_arr_DataColumn3.SetSize(0);
    l_str_SQLSentence = Translate("");
    l_str_PLT_1000TIP_Positions = Translate("");
    _FileOpenRunData(l_str_SQLSentence, 1);
    l_intTotalUnits = 0;
    {
      loopCounter2 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_str_FindTipInString = StrFind(file_RunData_DB_LabwareName, Translate("Tip"));
        if (l_str_FindTipInString >= 0)
        {
          l_intReturnSearchValue = ARRAYTOOLS::Lookup(l_arr_DataColumn1, file_RunData_DB_LabwareName);
          if (l_intReturnSearchValue == 0)
          {
            l_arr_DataColumn1.AddAsLast(file_RunData_DB_LabwareName);
            l_arr_DataColumn2.AddAsLast(file_RunData_DB_Description);
            _ConvertValueToString(file_RunData_DB_Units, l_str_RunData_DB_Units);
            l_arr_DataColumn3.AddAsLast(l_str_RunData_DB_Units);
          }
        }
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    Util2::Debug::TraceArray(Translate("l_arr_DataColumn1: "), l_arr_DataColumn1);
    Util2::Debug::TraceArray(Translate("l_arr_DataColumn2: "), l_arr_DataColumn2);
    Util2::Debug::TraceArray(Translate("l_arr_DataColumn3: "), l_arr_DataColumn3);
    l_arr_ColumnHeaders.SetSize(0);
    l_arr_ColumnHeaders.AddAsLast(Translate("Name"));
    l_arr_ColumnHeaders.AddAsLast(Translate("Description"));
    l_arr_ColumnHeaders.AddAsLast(Translate("Units"));
    l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialogSetResources(l_arr_ColumnHeaders);
    l_str_LoadingPicturesFileDirectoryAndImageName = i_strFilePath_MainImage;
    l_rtnFileExists = HSLExtensions::File::Exists(l_str_LoadingPicturesFileDirectoryAndImageName);
    if (l_rtnFileExists == ASWGLOBAL::BOOL::FALSE)
    {
      l_strMessage = StrConcat12(Translate("Function: "), l_str_FunctionName, Translate("\n\n"), Translate("Input parameter:i_strFilePath_MainImage: "), l_str_LoadingPicturesFileDirectoryAndImageName, Translate("\nImage does not exists in the expected folder."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      Trace("l_strMessage: ",l_strMessage);
      l_str_LoadingPicturesFileDirectoryAndImageName = StrConcat12(t_str_LoadingPicturesFileDirectory, Translate("\\"), Translate("TipDialogImage.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    Trace("l_str_LoadingPicturesFileDirectoryAndSmallImageName is: ",l_str_LoadingPicturesFileDirectoryAndSmallImageName);
    if (i_strTextMessage == "")
    {
      l_strTopMessageDialog = Translate("Prepare the corresponding amount of tips");
    }
    else
    {
      l_strTopMessageDialog = i_strTextMessage;
    }
    if (i_str_SoundFilePath != "")
    {
      VectorCustomDialogs::ActivateSoundForNextDialog(i_str_SoundFilePath, i_int_SoundLoop);
    }
    else
    {
      l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, i_int_Timeout, l_strTopMessageDialog, Translate("Press OK to Continue, Cancel to Abort"), l_str_LoadingPicturesFileDirectoryAndImageName, Translate(""), 500, l_arr_DataColumn1, l_arr_DataColumn2, l_arr_DataColumn3);
      if (l_intReturnDisplayDialog == 2)
      {
        DisplayDialog_Information(Translate("Cancel button pressed, system will abort"), Translate(""), 15, Translate(""), 0);
        abort;
      }
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function DisplayDialog_LoadList_SingleStep( variable i_strTopMessage, variable i_strFilePath_MainImage, variable i_strFilePath_SubImage, variable i_int_Timeout, variable i_str_SoundFilePath, variable i_int_SoundLoop, variable i_str_HeaderColumn1, variable & i_arr_str_Column1[], variable i_str_HeaderColumn2, variable & i_arr_str_Column2[], variable i_str_HeaderColumn3, variable & i_arr_str_Column3[] ) variable {
    private variable l_str_LoadingPicturesFileDirectoryAndSmallImageName;
    private variable l_rtnFileExists;
    private variable l_str_FunctionName;
    private variable l_strMessage;
    private variable l_str_LoadingPicturesFileDirectoryAndImageName;
    private variable l_strTopMessageDialog;
    private variable l_intReturnDisplayDialog;
    private variable l_arr_ColumnHeaders[];
    private variable l_int_NumberOfElements1;
    private variable l_int_NumberOfElements2;
    private variable l_int_NumberOfElements3;
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    l_int_NumberOfElements1=i_arr_str_Column1.GetSize();
    l_int_NumberOfElements2=i_arr_str_Column2.GetSize();
    l_int_NumberOfElements3=i_arr_str_Column3.GetSize();
    if (l_int_NumberOfElements1 != l_int_NumberOfElements2|| l_int_NumberOfElements1 != l_int_NumberOfElements3)
    {
      DisplayDialog_Error(Translate("input arrays must have same size"), Translate(""), 0, Translate(""), 0);
    }
    l_arr_ColumnHeaders.SetSize(0);
    l_arr_ColumnHeaders.AddAsLast(i_str_HeaderColumn1);
    l_arr_ColumnHeaders.AddAsLast(i_str_HeaderColumn2);
    l_arr_ColumnHeaders.AddAsLast(i_str_HeaderColumn3);
    l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialogSetResources(l_arr_ColumnHeaders);
    l_str_LoadingPicturesFileDirectoryAndImageName = i_strFilePath_MainImage;
    if (i_strFilePath_SubImage == "")
    {
      l_str_LoadingPicturesFileDirectoryAndSmallImageName = Translate("");
    }
    else
    {
      l_str_LoadingPicturesFileDirectoryAndSmallImageName = i_strFilePath_SubImage;
    }
    l_rtnFileExists = HSLExtensions::File::Exists(l_str_LoadingPicturesFileDirectoryAndImageName);
    if (l_rtnFileExists == ASWGLOBAL::BOOL::FALSE)
    {
      l_strMessage = StrConcat12(Translate("Function: "), l_str_FunctionName, Translate("\n\n"), Translate("Input parameter:i_strFilePath_MainImage: "), l_str_LoadingPicturesFileDirectoryAndImageName, Translate("\nImage does not exists in the expected folder."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      Trace("l_strMessage: ",l_strMessage);
      if(0){
        DisplayDialog_Warning(l_strMessage, Translate(""), 0, Translate(""), 0);
      }
    }
    if (i_strFilePath_SubImage != "")
    {
      l_rtnFileExists = HSLExtensions::File::Exists(l_str_LoadingPicturesFileDirectoryAndSmallImageName);
      if (l_rtnFileExists == ASWGLOBAL::BOOL::FALSE)
      {
        l_strMessage = StrConcat12(Translate("Function: "), l_str_FunctionName, Translate("\n\n"), Translate("Input parameter:i_strFilePath_SubImage: "), i_strFilePath_SubImage, Translate("\nImage does not exists in the expected folder."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        Trace("l_strMessage: ",l_strMessage);
        if(0){
          DisplayDialog_Warning(l_strMessage, Translate(""), 15, Translate(""), 0);
        }
      }
    }
    Trace("l_str_LoadingPicturesFileDirectoryAndSmallImageName is: ",l_str_LoadingPicturesFileDirectoryAndSmallImageName);
    l_strTopMessageDialog = i_strTopMessage;
    if (i_str_SoundFilePath != "")
    {
      VectorCustomDialogs::ActivateSoundForNextDialog(i_str_SoundFilePath, i_int_SoundLoop);
    }
    else
    {
      if (i_strFilePath_SubImage == "")
      {
        l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, i_int_Timeout, l_strTopMessageDialog, Translate("Press OK to Continue, Cancel to Abort"), l_str_LoadingPicturesFileDirectoryAndImageName, Translate(""), 500, i_arr_str_Column1, i_arr_str_Column2, i_arr_str_Column3);
      }
      else
      {
        l_intReturnDisplayDialog = VectorCustomDialogs::LoadingDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, i_int_Timeout, l_strTopMessageDialog, Translate("Press OK to Continue, Cancel to Abort"), l_str_LoadingPicturesFileDirectoryAndImageName, l_str_LoadingPicturesFileDirectoryAndSmallImageName, 500, i_arr_str_Column1, i_arr_str_Column2, i_arr_str_Column3);
      }
      if (l_intReturnDisplayDialog == 2)
      {
        DisplayDialog_Information(Translate("Cancel button pressed, system will abort"), Translate(""), 15, Translate(""), 0);
        abort;
      }
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Deck_Visualize_fromArray( device & ML_STAR, variable & i_arrLabware_ID[], variable i_State ) variable {
    private variable loopCounter1;
    private variable l_int_NumberOfElements;
    private variable l_arr_LabwareState[];
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    l_arr_LabwareState.SetSize(0);
    Util2::Debug::TraceArray(Translate("Setting Labware Visibility to true for this labware ids: "), i_arrLabware_ID);
    l_int_NumberOfElements=i_arrLabware_ID.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfElements;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_arr_LabwareState.AddAsLast(i_State);
      }
    }
    DeckVisualize::UpdateLoadedLabware(ML_STAR, i_arrLabware_ID, l_arr_LabwareState, Translate("Apply state to labware"));
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _SortElements( variable & io_arrColumn1[], variable & io_arrColumn2[], variable & io_arrColumn3[], variable i_intSortByColumn ) void {
    private variable l_bln_FunctionReturn;
    private variable l_int_Temp_LenghtStr;
    private variable l_int_ReturnSearch;
    private variable l_int_NumberOfPositionsDefinedAsSingleString;
    private variable l_var_arr1;
    private variable l_var_arr2;
    private variable l_str_NewPositionId;
    private variable l_var_arr3;
    private variable l_intSizeArray;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable l_str_loopCounter2;
    private variable l_str_concat_var1_var2_var3;
    private variable l_str_NewPositionIDs_formatted;
    private variable l_str_Concatenation;
    private variable l_arr_strTokens[];
    private variable l_arr_tempSorted[];
    private variable l_arr_TokensPositions[];
    private variable l_arr_tempNotSorted[];
    private variable l_arr_strNumeric1to9[];
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    if (t_intGetTraceLevel == TRACE_LEVEL_DEBUG)
    {
      Util2::Debug::TraceArray_3(Translate("Before Sorting"), io_arrColumn1, io_arrColumn2, io_arrColumn3);
    }
    l_arr_tempNotSorted.SetSize(0);
    l_intSizeArray=io_arrColumn1.GetSize();
    l_str_concat_var1_var2_var3 = Translate("");
    l_arr_strNumeric1to9.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < 9;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_str_loopCounter2 = StrIStr(loopCounter2);
        l_arr_strNumeric1to9.AddAsLast(l_str_loopCounter2);
      }
    }
    {
      for(loopCounter1 = 0; loopCounter1 < l_intSizeArray;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_var_arr1=io_arrColumn1.GetAt(loopCounter1-1);
        l_int_ReturnSearch = ARRAYTOOLS::Lookup(l_arr_strNumeric1to9, l_var_arr1);
        if (l_int_ReturnSearch != 0)
        {
          l_var_arr1 = StrConcat2(Translate("0"), l_var_arr1);
        }
        else
        {
          l_arr_TokensPositions.SetSize(0);
          STRTOKENIZE::StrTokenize(l_var_arr1, Translate(","), l_arr_TokensPositions, ASWGLOBAL::BOOL::FALSE);
          l_int_NumberOfPositionsDefinedAsSingleString=l_arr_TokensPositions.GetSize();
          l_str_NewPositionIDs_formatted = Translate("");
          {
            for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfPositionsDefinedAsSingleString;)
            {
              loopCounter3 = loopCounter3 + 1;
              l_str_NewPositionId = Translate("");
              l_int_Temp_LenghtStr = StrGetLength(l_arr_TokensPositions.ElementAt( loopCounter3 -1));
              if (l_int_Temp_LenghtStr == 1)
              {
                l_str_NewPositionId = StrConcat2(Translate("0"), l_arr_TokensPositions.ElementAt( loopCounter3 -1));
              }
              else
              {
                l_str_NewPositionId = l_arr_TokensPositions.ElementAt( loopCounter3 -1);
              }
              if (loopCounter3 != l_int_NumberOfPositionsDefinedAsSingleString)
              {
                l_str_NewPositionIDs_formatted = StrConcat12(l_str_NewPositionIDs_formatted, Translate(""), l_str_NewPositionId, Translate("\n"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              }
              else
              {
                l_str_NewPositionIDs_formatted = StrConcat12(l_str_NewPositionIDs_formatted, Translate(""), l_str_NewPositionId, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              }
            }
          }
          l_var_arr1 = l_str_NewPositionIDs_formatted;
        }
        l_var_arr2=io_arrColumn2.GetAt(loopCounter1-1);
        l_var_arr3=io_arrColumn3.GetAt(loopCounter1-1);
        if (i_intSortByColumn == 1)
        {
          l_str_concat_var1_var2_var3 = StrConcat12(l_var_arr1, Translate("$"), l_var_arr2, Translate("$"), l_var_arr3, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        if (i_intSortByColumn == 2)
        {
          l_str_concat_var1_var2_var3 = StrConcat12(l_var_arr2, Translate("$"), l_var_arr1, Translate("$"), l_var_arr3, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        if (i_intSortByColumn == 3)
        {
          l_str_concat_var1_var2_var3 = StrConcat12(l_var_arr3, Translate("$"), l_var_arr1, Translate("$"), l_var_arr2, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        l_arr_tempNotSorted.AddAsLast(l_str_concat_var1_var2_var3);
      }
    }
    l_arr_tempSorted = HSLExtensions::Array::Sort(l_arr_tempNotSorted, 1, l_bln_FunctionReturn);
    io_arrColumn1.SetSize(0);
    io_arrColumn2.SetSize(0);
    io_arrColumn3.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < l_intSizeArray;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_arr_strTokens.SetSize(0);
        l_str_Concatenation=l_arr_tempSorted.GetAt(loopCounter1-1);
        STRTOKENIZE::StrTokenize(l_str_Concatenation, Translate("$"), l_arr_strTokens, ASWGLOBAL::BOOL::FALSE);
        if (i_intSortByColumn == 1)
        {
          io_arrColumn1.AddAsLast(l_arr_strTokens.ElementAt( 1 -1));
          io_arrColumn2.AddAsLast(l_arr_strTokens.ElementAt( 2 -1));
          io_arrColumn3.AddAsLast(l_arr_strTokens.ElementAt( 3 -1));
        }
        if (i_intSortByColumn == 2)
        {
          io_arrColumn2.AddAsLast(l_arr_strTokens.ElementAt( 2 -1));
          io_arrColumn1.AddAsLast(l_arr_strTokens.ElementAt( 1 -1));
          io_arrColumn3.AddAsLast(l_arr_strTokens.ElementAt( 3 -1));
        }
        if (i_intSortByColumn == 3)
        {
          io_arrColumn3.AddAsLast(l_arr_strTokens.ElementAt( 3 -1));
          io_arrColumn1.AddAsLast(l_arr_strTokens.ElementAt( 1 -1));
          io_arrColumn2.AddAsLast(l_arr_strTokens.ElementAt( 2 -1));
        }
      }
    }
    if (t_intGetTraceLevel == TRACE_LEVEL_DEBUG)
    {
      Util2::Debug::TraceArray_3(Translate("After Sorting"), io_arrColumn1, io_arrColumn2, io_arrColumn3);
    }
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
  }

  private function _GroupDataInDialog_bckp( variable & io_arrColumn1[], variable & io_arrColumn2[], variable & io_arrColumn3[], variable i_bln_add_additionalText ) void {
    private dialog dialogHandle_4;
    private dialog dialogHandle_5;
    private dialog dialogHandle_6;
    private dialog dialogHandle_7;
    private variable l_int_PositionSeparatorX;
    private variable l_str_DescriptionsConcat;
    private variable l_str_ElementAtColumn2;
    private variable l_int_TempValue_Column2;
    private variable l_int_Quantity;
    private variable l_str_Description_Extracted;
    private variable l_int_NumberOfChDescription;
    private variable loopCounter1;
    private variable l_int_NumberOfDistinctElements;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable l_int_NumberOfDistinctDescriptions;
    private variable l_str_Quantity;
    private variable l_int_NumberOfElements;
    private variable l_int_LengthEntrySecondColumn;
    private variable l_TypeTemp;
    private variable l_arr_TempDescriptions[];
    private variable l_arr_TempColumn1[];
    private variable l_arr_TempColumn2[];
    private variable l_arr_TempColumn3[];
    private variable l_arr_TempDescriptions_distinct[];
    private variable io_arrColumn1_distinct[];
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    l_int_NumberOfElements=io_arrColumn1.GetSize();
    ARRAYTOOLS::get_distinct_from_array(io_arrColumn1, io_arrColumn1_distinct);
    l_int_NumberOfDistinctElements=io_arrColumn1_distinct.GetSize();
    l_arr_TempColumn1.SetSize(0);
    l_arr_TempColumn2.SetSize(0);
    l_arr_TempColumn3.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfDistinctElements;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_str_DescriptionsConcat = Translate("");
        l_arr_TempDescriptions.SetSize(0);
        l_int_Quantity = 0;
        l_str_ElementAtColumn2 = Translate("");
        l_arr_TempColumn1.AddAsLast(io_arrColumn1_distinct.ElementAt( loopCounter1 -1));
        {
          for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfElements;)
          {
            loopCounter2 = loopCounter2 + 1;
            if (io_arrColumn1.ElementAt( loopCounter2 -1) == io_arrColumn1_distinct.ElementAt( loopCounter1 -1))
            {
              l_TypeTemp = StrGetType(io_arrColumn2.ElementAt( loopCounter2 -1));
              TrcTrace(Translate("io_arrColumn2[loopCounter2]: "), io_arrColumn2.ElementAt( loopCounter2 -1));
              TrcTrace(Translate("io_arrColumn2[loopCounter2] l_TypeTemp: "), l_TypeTemp);
              if (l_TypeTemp != "i")
              {
                l_int_TempValue_Column2 = StrIVal(io_arrColumn2.ElementAt( loopCounter2 -1));
                l_str_ElementAtColumn2 = StrIStr(io_arrColumn2.ElementAt( loopCounter2 -1));
              }
              else
              {
                l_int_TempValue_Column2 = io_arrColumn2.ElementAt( loopCounter2 -1);
                l_str_ElementAtColumn2 = io_arrColumn2.ElementAt( loopCounter2 -1);
              }
              dialogHandle_7.SetOutput(Translate("B"));
              dialogHandle_7.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              l_int_LengthEntrySecondColumn = StrGetLength(io_arrColumn2.ElementAt( loopCounter2 -1));
              dialogHandle_4.SetOutput(Translate("B1"));
              dialogHandle_4.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              l_int_PositionSeparatorX = StrFind(io_arrColumn2.ElementAt( loopCounter2 -1), Translate("x"));
              dialogHandle_6.SetOutput(Translate("B2"));
              dialogHandle_6.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              l_int_NumberOfChDescription = l_int_LengthEntrySecondColumn - l_int_PositionSeparatorX - 2;
              l_str_Description_Extracted = StrRight(io_arrColumn2.ElementAt( loopCounter2 -1), l_int_NumberOfChDescription);
              dialogHandle_5.SetOutput(Translate("B3"));
              dialogHandle_5.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              TrcTrace12(Translate("l_int_LengthEntrySecondColumn: "), l_int_LengthEntrySecondColumn, Translate("   "), Translate("l_int_PositionSeparatorX: "), l_int_PositionSeparatorX, Translate("   "), Translate(""), Translate("io_arrColumn2[loopCounter2]: "), io_arrColumn2.ElementAt( loopCounter2 -1), Translate(""), Translate(""), Translate(""));
              l_int_Quantity = l_int_Quantity + l_int_TempValue_Column2;
              l_arr_TempDescriptions.AddAsLast(io_arrColumn3.ElementAt( loopCounter2 -1));
            }
          }
        }
        l_str_Quantity = StrIStr(l_int_Quantity);
        if (i_bln_add_additionalText == ASWGLOBAL::BOOL::TRUE)
        {
          l_str_Quantity = StrConcat12(l_str_Quantity, Translate(" x "), l_str_Description_Extracted, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        else
        {
          l_str_Quantity = l_int_Quantity;
        }
        l_str_Description_Extracted = Translate("");
        l_arr_TempColumn2.AddAsLast(l_str_Quantity);
        ARRAYTOOLS::get_distinct_from_array(l_arr_TempDescriptions, l_arr_TempDescriptions_distinct);
        l_int_NumberOfDistinctDescriptions=l_arr_TempDescriptions_distinct.GetSize();
        {
          for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfDistinctDescriptions;)
          {
            loopCounter3 = loopCounter3 + 1;
            if (loopCounter3 == 1)
            {
              l_str_DescriptionsConcat = StrConcat8(l_str_DescriptionsConcat, Translate(""), l_arr_TempDescriptions_distinct.ElementAt( loopCounter3 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            }
            else
            {
              l_str_DescriptionsConcat = StrConcat8(l_str_DescriptionsConcat, Translate("\n"), l_arr_TempDescriptions_distinct.ElementAt( loopCounter3 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            }
          }
        }
        l_arr_TempColumn3.AddAsLast(l_str_DescriptionsConcat);
      }
    }
    io_arrColumn1=l_arr_TempColumn1;
    io_arrColumn2=l_arr_TempColumn2;
    io_arrColumn3=l_arr_TempColumn3;
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
  }

  function Display_ResourcesPDF(  ) void {
    private variable l_str_TopicName;
    private variable l_str_LabwareNameForFile;
    private variable l_intNumElements;
    private variable l_inLengthString;
    private variable l_strMessage;
    private variable l_strSQL;
    private variable l_str_Description;
    private variable l_blnErrorFunction;
    private variable l_flt_Volume;
    private variable l_intNumberOfTopics;
    private variable loopCounter1;
    private variable l_str_Name;
    private variable l_bln_AddLabwareToArray;
    private variable l_intCurrentTopic;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable l_str_DetailedDescription;
    private variable l_str_LabwareDetailedDescriptionForFile;
    private variable l_arr_flt_Volume_temp[];
    private variable l_arr_str_Name_temp[];
    private variable l_arr_str_DetailedDescription_temp[];
    private variable l_arr_str_Description_temp[];
    private variable l_arr_str_Topic_temp[];
    private variable l_arr_strTopics[];
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    t_str_Comment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, t_str_Comment);
    onerror goto errLabel_8 ;
    err.Clear();
    LOADINGDOCUMENTHELPER::PrepareNewLoadingDocument();
    l_blnErrorFunction = ASWGLOBAL::BOOL::FALSE;
    errLabel_8 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      l_blnErrorFunction = ASWGLOBAL::BOOL::TRUE;
      DisplayDialog_Error(Translate("Failed to Prepare New Loading Document. System will abort.\nHint:\nEnsure the next items are installed on your computer:\n1) Hamilton Loading Document Helper Library version 1.0 and\n2) NET.Framework version 4.0"), Translate(""), 15, Translate(""), 0);
    }   /* end if from skip handler if no error */
    l_strMessage = StrConcat12(Translate("Please prepare Reagents, Mastermixes and Labware as instructed below.\n\n"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    l_arr_strTopics.SetSize(0);
    file_RunData.AddField("DB_Type", file_RunData_DB_Type, hslString, 255);
    if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, "Select distinct [DB_Type] from [RunData$]") )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file_RunData.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file_RunData.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (file_RunData_DB_Type != "MastermixComponent")
        {
          l_arr_strTopics.AddAsLast(file_RunData_DB_Type);
        }
      }
    }
    if( 0 != file_RunData.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file_RunData.RemoveFields();
    l_intNumberOfTopics=l_arr_strTopics.GetSize();
    Util2::Debug::TraceArray(Translate("l_arr_strTopics: "), l_arr_strTopics);
    l_arr_str_Topic_temp.SetSize(0);
    l_arr_str_Name_temp.SetSize(0);
    l_arr_flt_Volume_temp.SetSize(0);
    l_arr_str_Description_temp.SetSize(0);
    l_arr_str_DetailedDescription_temp.SetSize(0);
    {
      for(l_intCurrentTopic = 0; l_intCurrentTopic < l_intNumberOfTopics;)
      {
        l_intCurrentTopic = l_intCurrentTopic + 1;
        if (l_arr_strTopics.ElementAt( l_intCurrentTopic -1) == "Mastermix")
        {
          l_str_TopicName = StrConcat12(l_arr_strTopics.ElementAt( l_intCurrentTopic -1), Translate("                                                           "), Translate("Volume"), Translate("        "), Translate("Units"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          LOADINGDOCUMENTHELPER::AddNewTopicToLoadingDocument(l_str_TopicName);
          l_strSQL = StrConcat12(Translate("Select * from [RunData$] where [DB_Type] Like '"), l_arr_strTopics.ElementAt( l_intCurrentTopic -1), Translate("%'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        else
        {
          l_strSQL = StrConcat12(Translate("Select * from [RunData$] where [DB_Type] = '"), l_arr_strTopics.ElementAt( l_intCurrentTopic -1), Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          if (l_arr_strTopics.ElementAt( l_intCurrentTopic -1) == "Reagent")
          {
            l_str_TopicName = StrConcat12(l_arr_strTopics.ElementAt( l_intCurrentTopic -1), Translate("                                                               "), Translate("Volume"), Translate("        "), Translate("Units"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            LOADINGDOCUMENTHELPER::AddNewTopicToLoadingDocument(l_str_TopicName);
          }
          else
          {
          }
        }
        Trace("",l_strSQL);
        file_RunData.AddField("DB_VolumePerWell", file_RunData_DB_VolumePerWell, hslFloat);
        file_RunData.AddField("DB_DeadVolumeLabware", file_RunData_DB_DeadVolumeLabware, hslFloat);
        file_RunData.AddField("DB_DeadVolumePercent", file_RunData_DB_DeadVolumePercent, hslFloat);
        file_RunData.AddField("DB_TotalDeadVolume", file_RunData_DB_TotalDeadVolume, hslFloat);
        file_RunData.AddField("DB_TotalVolume", file_RunData_DB_TotalVolume, hslFloat);
        file_RunData.AddField("DB_ExtraVolume", file_RunData_DB_ExtraVolume, hslFloat);
        file_RunData.AddField("DB_NumberOfSamples", file_RunData_DB_NumberOfSamples, hslInteger);
        file_RunData.AddField("DB_CarrierName", file_RunData_DB_CarrierName, hslString, 255);
        file_RunData.AddField("DB_SiteID", file_RunData_DB_SiteID, hslString, 255);
        file_RunData.AddField("DB_Units", file_RunData_DB_Units, hslInteger);
        file_RunData.AddField("DB_TrackNumber", file_RunData_DB_TrackNumber, hslInteger);
        file_RunData.AddField("DB_LabwareName", file_RunData_DB_LabwareName, hslString, 255);
        file_RunData.AddField("DB_LabwareDescription", file_RunData_DB_LabwareDescription, hslString, 255);
        file_RunData.AddField("DB_LabwareFileName", file_RunData_DB_LabwareFileName, hslString, 255);
        file_RunData.AddField("DB_SequenceName", file_RunData_DB_SequenceName, hslString, 255);
        file_RunData.AddField("DB_PositionID", file_RunData_DB_PositionID, hslString, 255);
        file_RunData.AddField("DB_ContainerViewName", file_RunData_DB_ContainerViewName, hslString, 255);
        file_RunData.AddField("DB_ContainerDescription", file_RunData_DB_ContainerDescription, hslString, 255);
        file_RunData.AddField("DB_Name", file_RunData_DB_Name, hslString, 255);
        file_RunData.AddField("DB_MasterMixComponentName", file_RunData_DB_MasterMixComponentName, hslString, 255);
        file_RunData.AddField("DB_MastermixName", file_RunData_DB_MastermixName, hslString, 255);
        file_RunData.AddField("DB_MastermixPreparedOnDeck", file_RunData_DB_MastermixPreparedOnDeck, hslInteger);
        file_RunData.AddField("DB_Type", file_RunData_DB_Type, hslString, 255);
        file_RunData.AddField("DB_Ratio", file_RunData_DB_Ratio, hslFloat);
        file_RunData.AddField("DB_Description", file_RunData_DB_Description, hslString, 255);
        file_RunData.AddField("DB_AddToDialog", file_RunData_DB_AddToDialog, hslInteger);
        if( 0 == file_RunData.Open(t_str_FullpathFile_RunData + " " + "RunData$", hslRead, l_strSQL) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_FullpathFile_RunData, "HxMetEdCompCmd");
        }
        {
          loopCounter4 = 0;
          while (
             (file_RunData.Eof() == 0)
          )
          {
            loopCounter4 = loopCounter4 + 1;
            if( 0 == file_RunData.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            l_str_DetailedDescription = Translate("");
            l_str_Description = Translate("");
            l_str_Name = Translate("");
            l_flt_Volume = -1;
            if (l_arr_strTopics.ElementAt( l_intCurrentTopic -1) == "Mastermix")
            {
              if (file_RunData_DB_Type != l_arr_strTopics.ElementAt( l_intCurrentTopic -1))
              {
                l_str_Name = StrConcat12(Translate("        ¤  "), file_RunData_DB_Name, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                l_str_DetailedDescription = Translate("");
              }
              else
              {
                l_str_Name = file_RunData_DB_Name;
                if (file_RunData_DB_ContainerViewName != "")
                {
                  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_ContainerViewName: "), file_RunData_DB_ContainerViewName);
                  l_str_DetailedDescription = StrConcat12(file_RunData_DB_Description, Translate(""), Translate(""), Translate(" in "), file_RunData_DB_ContainerViewName, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                  l_str_LabwareNameForFile = file_RunData_DB_ContainerViewName;
                  l_str_LabwareDetailedDescriptionForFile = file_RunData_DB_ContainerDescription;
                }
                else
                {
                  l_str_DetailedDescription = StrConcat12(file_RunData_DB_Description, Translate(" in \n"), file_RunData_DB_LabwareDescription, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                  l_str_LabwareNameForFile = file_RunData_DB_LabwareName;
                  l_str_LabwareDetailedDescriptionForFile = file_RunData_DB_LabwareDescription;
                }
                l_arr_str_Name_temp.AddAsLast(l_str_LabwareNameForFile);
                l_arr_flt_Volume_temp.AddAsLast(-1);
                l_arr_str_Description_temp.AddAsLast(file_RunData_DB_Units);
                l_arr_str_DetailedDescription_temp.AddAsLast(l_str_LabwareDetailedDescriptionForFile);
              }
              l_flt_Volume = file_RunData_DB_TotalVolume;
              l_str_Description = file_RunData_DB_Units;
              LOADINGDOCUMENTHELPER::AddLoadingDataToLoadingDocument(l_str_Name, l_flt_Volume, l_str_Description, l_str_DetailedDescription);
            }
            if (l_arr_strTopics.ElementAt( l_intCurrentTopic -1) == "Reagent")
            {
              l_str_Name = file_RunData_DB_Name;
              l_flt_Volume = file_RunData_DB_TotalVolume;
              l_str_Description = StrConcat12(file_RunData_DB_Units, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              l_inLengthString = StrGetLength(file_RunData_DB_ContainerViewName);
              if (l_inLengthString != 0)
              {
                TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("file_RunData_DB_ContainerViewName: "), file_RunData_DB_ContainerViewName);
                l_str_DetailedDescription = StrConcat12(file_RunData_DB_Description, Translate(""), Translate(""), Translate(" in "), file_RunData_DB_ContainerViewName, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                l_str_LabwareNameForFile = file_RunData_DB_ContainerViewName;
                l_str_LabwareDetailedDescriptionForFile = file_RunData_DB_ContainerDescription;
              }
              else
              {
                l_str_DetailedDescription = StrConcat12(file_RunData_DB_Description, Translate(" in \n"), file_RunData_DB_LabwareDescription, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                l_str_LabwareNameForFile = file_RunData_DB_LabwareName;
                l_str_LabwareDetailedDescriptionForFile = file_RunData_DB_LabwareDescription;
              }
              l_arr_str_Name_temp.AddAsLast(l_str_LabwareNameForFile);
              l_arr_flt_Volume_temp.AddAsLast(-1);
              l_arr_str_Description_temp.AddAsLast(l_str_Description);
              l_arr_str_DetailedDescription_temp.AddAsLast(l_str_LabwareDetailedDescriptionForFile);
              LOADINGDOCUMENTHELPER::AddLoadingDataToLoadingDocument(l_str_Name, l_flt_Volume, l_str_Description, l_str_DetailedDescription);
            }
            if (l_arr_strTopics.ElementAt( l_intCurrentTopic -1) == "LabwareResource")
            {
              l_str_Name = file_RunData_DB_Name;
              l_flt_Volume = -1;
              l_str_Description = StrConcat12(file_RunData_DB_Units, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              l_str_DetailedDescription = file_RunData_DB_LabwareDescription;
              l_bln_AddLabwareToArray = ASWGLOBAL::BOOL::TRUE;
              l_arr_str_Topic_temp.AddAsLast(l_arr_strTopics.ElementAt( l_intCurrentTopic -1));
              l_arr_str_Name_temp.AddAsLast(l_str_Name);
              l_arr_flt_Volume_temp.AddAsLast(l_flt_Volume);
              l_arr_str_Description_temp.AddAsLast(l_str_Description);
              l_arr_str_DetailedDescription_temp.AddAsLast(l_str_DetailedDescription);
            }
          }
        }
        if( 0 != file_RunData.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file_RunData.RemoveFields();
      }
    }
    l_str_TopicName = StrConcat12(Translate("Labware"), Translate("                                                                    "), Translate("        "), Translate("        "), Translate("Units"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    LOADINGDOCUMENTHELPER::AddNewTopicToLoadingDocument(l_str_TopicName);
    if (t_intGetTraceLevel == TRACE_LEVEL_DEBUG)
    {
      Util2::Debug::TraceArray_3(Translate("before grouping content"), l_arr_str_Name_temp, l_arr_str_Description_temp, l_arr_str_DetailedDescription_temp);
    }
    _GroupDataInDialog(l_arr_str_Name_temp, l_arr_str_Description_temp, l_arr_str_DetailedDescription_temp, ASWGLOBAL::BOOL::FALSE);
    if (t_intGetTraceLevel == TRACE_LEVEL_DEBUG)
    {
      Util2::Debug::TraceArray_3(Translate("after grouping content"), l_arr_str_Name_temp, l_arr_str_Description_temp, l_arr_str_DetailedDescription_temp);
    }
    l_intNumElements=l_arr_str_Name_temp.GetSize();
    {
      for(loopCounter3 = 0; loopCounter3 < l_intNumElements;)
      {
        loopCounter3 = loopCounter3 + 1;
        LOADINGDOCUMENTHELPER::AddLoadingDataToLoadingDocument(l_arr_str_Name_temp.ElementAt( loopCounter3 -1), l_arr_flt_Volume_temp.ElementAt( loopCounter3 -1), l_arr_str_Description_temp.ElementAt( loopCounter3 -1), l_arr_str_DetailedDescription_temp.ElementAt( loopCounter3 -1));
      }
    }
    LOADINGDOCUMENTHELPER::CreateAndShowReagentsLoadDocument(t_str_KitProvider_KitName, t_str_ProtocolVersion, l_strMessage);
    TRACELEVEL::TraceAction(t_intGetTraceLevel, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, t_str_Comment);
  }
} // library namespace
