#pragma once
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLSeqLib.hsl"
#include "HSLTimLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLMthLib.hsl"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "ArrayTools\\ArrayTools.hs_"
#include "StringTokenizer\\StrTokenize.hs_"
#include "HSLUtilLib2.hsl"
#include "HSLTrcLib.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace NORMALIZATIONANDPOOLING_CONTROLLER {
  variable t_hdlFile_Worklist_OriginalSampleVolume;
  variable t_hdlFile_Worklist_SampleStatus;
  variable t_hdlFile_Worklist_VolumeToAspirate;
  variable t_hdlFile_Worklist_Mass_per_sample;
  variable t_hdlFile_Worklist_Sample_Concentration;
  variable t_hdlFile_Worklist_Sample_Position;
  variable t_hdlFile_Worklist_Target_Well;
  variable t_hdlFile_Worklist_Sample_ID;
  variable t_str_Time;
  variable t_str_Date;
  file t_hdlFile_Worklist;
  variable t_hdlFile_Worklist_VolumePerPool;
  variable t_hdlFile_Worklist_MassPerPool;
  variable t_str_OutputFilePath;
  variable t_str_TemplateFilePath;
  variable t_str_ExcludedSamplesFilePath;
  file t_hdlFile_Template;
  file t_hdlFile_Output;
  file t_hdlFile_Excluded;
  variable t_intTraceLevel;
  variable t_strControllerVersion;
  variable t_strLibraryNameWithoutExtension;
  variable t_strLibraryName;
  variable t_strKitTitle;
  variable t_strLogFilesDirectory;
  variable t_blnActivateIntegratedAbortHandler;
  function FilterSequenceAndArrayForTipType( sequence i_seq_Tips, sequence i_seq_Source, sequence i_seq_Target, variable & i_arr_flt_Volumes[], sequence & o_seq_Aspirate, sequence & o_seq_Dispense, variable & o_arr_flt_Volumes[], device & ML_STAR ) void ;
  function Init( device & ML_STAR, variable i_strKitTitle, variable i_blnActivateIntegratedAbortHandler, variable & o_strControllerNameAndVersion ) variable ;
  function Normalization_ByConcentration( variable i_str_WorklistFilePath, sequence i_seq_SourceSamplePlate, sequence i_seq_NormalizationPlate, variable i_flt_MaximumVolumePerContainer, variable i_bln_AllowCostumerIntervention, variable & o_int_NumberOfSamples, sequence & o_seq_Asp_Samples, sequence & o_seq_Disp_Samples, variable & o_arr_flt_Volumes_Sample[], sequence & o_seq_Disp_Diluent, variable & o_arr_flt_Volumes_Diluent[], variable & o_str_FilePath_OutputFile, variable & o_flt_Diluent_TotalVolume, device & ML_STAR ) variable ;
  function Pooling_ByMass( variable i_str_WorklistFilePath, sequence i_seq_SourceSamplePlate, sequence i_seq_Pooling, variable i_flt_MaximumVolumePerContainer, variable i_bln_AllowCostumerIntervention, sequence & o_seq_Asp_Samples, sequence & o_seq_Disp_Samples, variable & o_arr_flt_Volumes_Sample[], sequence & o_seq_Disp_Diluent, variable & o_arr_flt_Volumes_Diluent[], variable & o_flt_Diluent_TotalVolume, variable & o_str_FilePath_OutputFile, variable & o_int_NumberOfPools, variable & o_arr_flt_Volumes_Pools[], variable & o_arr_str_PostionIDsPools[], device & ML_STAR ) variable ;
  function Pooling_ByVolume( variable i_str_WorklistFilePath, sequence i_seq_SourceSamplePlate, sequence i_seq_Pooling, variable i_flt_MaximumVolumePerContainer, variable i_bln_AllowCostumerIntervention, sequence & o_seq_Asp_Samples, sequence & o_seq_Disp_Samples, variable & o_arr_flt_Volumes_Sample[], variable & o_int_NumberOfPools, variable & o_arr_str_PostionIDsPools[], variable & o_arr_flt_Volumes_Pools[], variable & o_str_FilePath_OutputFile, device & ML_STAR ) variable ;
  private function _CheckBindReturnValueVectorCustomDialogs( variable i_intBindReturnValue ) void ;
  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void ;
  private function _Display_InputWorklist_Dialog( variable & o_str_FileWorklistFullPath ) void ;
  private function _GetPoolInfo( variable i_str_FilePath, variable i_str_SQL, variable i_bln_TraceArrayInfo, file & i_hdlFile, variable i_int_PoolingMode, variable & o_arr_str_Pools[], variable & o_arr_int_NumberOfSamplesPerPool[], variable & o_arr_flt_MassPerSampleInPool[], variable & o_arr_flt_MassPerPool[], variable & o_arr_flt_VolumePerPool[] ) variable ;
  private function _PoolingFileOpen( variable i_str_FilePath, variable i_str_SQLSentence, variable i_int_Mode, variable i_int_PoolingMode, file & io_hdlFile ) void ;
  private function _UpdateRecord( variable i_str_FilePath, variable i_str_SheetName, variable i_str_ColumnName, variable i_keyNewValue, variable i_str_ColumnReference, variable i_keyValueReference ) void ;
  private function _Version_history(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ARRAYTOOLS::_InitLibrary();
    STRTOKENIZE::_InitLibrary();
  }
  function _ExitLibrary() {
    ARRAYTOOLS::_ExitLibrary();
    STRTOKENIZE::_ExitLibrary();
  }

  function Normalization_ByConcentration( variable i_str_WorklistFilePath, sequence i_seq_SourceSamplePlate, sequence i_seq_NormalizationPlate, variable i_flt_MaximumVolumePerContainer, variable i_bln_AllowCostumerIntervention, variable & o_int_NumberOfSamples, sequence & o_seq_Asp_Samples, sequence & o_seq_Disp_Samples, variable & o_arr_flt_Volumes_Sample[], sequence & o_seq_Disp_Diluent, variable & o_arr_flt_Volumes_Diluent[], variable & o_str_FilePath_OutputFile, variable & o_flt_Diluent_TotalVolume, device & ML_STAR ) variable {
    private variable loopCounter1;
    private variable l_flt_Volume_MinimumToPipette;
    private variable l_flt_Volume_SampleAspirate;
    private variable l_flt_Volume_DiluentAspirate;
    private variable l_str_LabwareID_NormalizationPlate;
    private variable l_str_LabwareID_SamplePlate;
    private variable l_str_Worklist_Extension;
    private variable l_str_Worklist_FileName;
    private variable l_bln_SampleExcluded;
    private variable l_flt_Volume_Total;
    private variable l_int_NumberOfSamples_Source;
    private variable loopCounter2;
    private variable l_int_NumberOfSamples_Excluded;
    private variable l_str_Message;
    private variable CounterWorklistReloading;
    private variable l_flt_Volume_MinimumToPipetteDiluent;
    private variable l_int_ReturnValue;
    private variable l_arr_strTokens[];
    private variable t_hdlFile_Worklist_FinalSampleConcentration;
    private variable l_bln_NormalizeInOriginalSamplePlate;
    private variable t_hdlFile_Worklist_FinalSampleVolume;
    private variable l_str_MultipleUsedSampleTargetPositions;
    private variable l_int_NumberOfSamplesUsedMultipleTimes;
    private variable l_int_NumberOfUseThisSample;
    private variable l_str_MultipleUsedSampleSourcePositions;
    private variable l_int_NumberOfSampleSourceWells_distinct;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable l_int_NumberOfSampleTargetWells_distinct;
    private variable l_arr_str_SampleTargetPosition_distinct[];
    private variable l_arr_str_Temp[];
    private variable l_arr_str_SampleSourcePosition_distinct[];
    private variable l_arr_str_SampleSourcePosition[];
    private variable l_arr_str_MultipleUsedSampleTargetPositions[];
    private variable l_arr_str_SampleTargetPosition_copy[];
    private variable l_arr_int_NumberOfUseSample[];
    private variable l_arr_str_SampleTargetPosition[];
    private variable l_arr_str_MultipleUsedSampleSourcePositions[];
    private variable l_arr_str_SampleSourcePosition_copy[];
    private variable l_strFunctionName;
    o_int_NumberOfSamples = 0;
    { sequence __temp; o_seq_Asp_Samples = __temp; }
    { sequence __temp; o_seq_Disp_Samples = __temp; }
    o_arr_flt_Volumes_Sample.SetSize( 0);
    { sequence __temp; o_seq_Disp_Diluent = __temp; }
    o_arr_flt_Volumes_Diluent.SetSize( 0);
    o_str_FilePath_OutputFile = 0;
    o_flt_Diluent_TotalVolume = 0;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    {
      CounterWorklistReloading = 0;
      while (1 == 1)
      {
        CounterWorklistReloading = CounterWorklistReloading + 1;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_str_WorklistFilePath: "), i_str_WorklistFilePath);
        l_flt_Volume_MinimumToPipette = 2;
        l_flt_Volume_MinimumToPipetteDiluent = 0.5;
        o_int_NumberOfSamples = 0;
        o_arr_flt_Volumes_Sample.SetSize(0);
        o_arr_flt_Volumes_Diluent.SetSize(0);
        l_arr_int_NumberOfUseSample.SetSize(0);
        l_str_Worklist_FileName = HSLExtensions::File::GetFileNameWithoutExtension(i_str_WorklistFilePath);
        l_str_Worklist_Extension = HSLExtensions::File::GetFileExtension(i_str_WorklistFilePath);
        t_str_OutputFilePath = StrConcat12(t_strLogFilesDirectory, Translate("\\"), t_strKitTitle, Translate("_"), Translate("NormalizationOutput"), Translate("_"), t_str_Date, Translate("_"), t_str_Time, Translate("."), Translate("xls"), Translate(""));
        l_str_LabwareID_NormalizationPlate = SeqGetLabwareId(i_seq_NormalizationPlate);
        l_str_LabwareID_SamplePlate = SeqGetLabwareId(i_seq_SourceSamplePlate);
        o_flt_Diluent_TotalVolume = 0.0;
        l_int_NumberOfSamples_Excluded = 0;
        SeqRemoveAll(o_seq_Disp_Diluent);
        SeqRemoveAll(o_seq_Disp_Samples);
        SeqRemoveAll(o_seq_Asp_Samples);
        if (l_str_LabwareID_NormalizationPlate == l_str_LabwareID_SamplePlate)
        {
          l_bln_NormalizeInOriginalSamplePlate = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          l_bln_NormalizeInOriginalSamplePlate = ASWGLOBAL::BOOL::FALSE;
        }
        l_int_NumberOfSamples_Source = 0;
        l_arr_str_SampleSourcePosition.SetSize(0);
        l_arr_str_SampleTargetPosition.SetSize(0);
        if (l_bln_NormalizeInOriginalSamplePlate == ASWGLOBAL::BOOL::TRUE)
        {
          if (l_str_Worklist_Extension == "csv")
          {
            onerror goto errLabel_1 ;
            err.Clear();
            t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Concentration", t_hdlFile_Worklist_Sample_Concentration, hslFloat);
            t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
            t_hdlFile_Worklist.AddField("Final_SampleConcentration", t_hdlFile_Worklist_FinalSampleConcentration, hslFloat);
            t_hdlFile_Worklist.SetDelimiter(";");
            if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath, hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
            }
            errLabel_1 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist. Please review file structure and content, possibly required columns or entries are missing. System will abort"));
              return (ASWGLOBAL::BOOL::FALSE);
            }   /* end if from skip handler if no error */
          }
          if (l_str_Worklist_Extension == "xls")
          {
            onerror goto errLabel_2 ;
            err.Clear();
            t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Concentration", t_hdlFile_Worklist_Sample_Concentration, hslFloat);
            t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
            t_hdlFile_Worklist.AddField("Final_SampleConcentration", t_hdlFile_Worklist_FinalSampleConcentration, hslFloat);
            if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath + " " + "Sheet1$", hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
            }
            errLabel_2 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist. Please review file structure and content, possibly required columns or entries are missing. System will abort"));
              return (ASWGLOBAL::BOOL::FALSE);
            }   /* end if from skip handler if no error */
          }
          if (l_str_Worklist_Extension != "csv")
          {
            if (l_str_Worklist_Extension != "xls")
            {
              _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist (only .xls and .csv file formats are accepted). System will abort"));
              return (ASWGLOBAL::BOOL::FALSE);
            }
          }
        }
        else
        {
          if (l_str_Worklist_Extension == "csv")
          {
            onerror goto errLabel_3 ;
            err.Clear();
            t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
            t_hdlFile_Worklist.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Concentration", t_hdlFile_Worklist_Sample_Concentration, hslFloat);
            t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
            t_hdlFile_Worklist.AddField("Final_SampleConcentration", t_hdlFile_Worklist_FinalSampleConcentration, hslFloat);
            t_hdlFile_Worklist.AddField("Final_SampleVolume", t_hdlFile_Worklist_FinalSampleVolume, hslFloat);
            t_hdlFile_Worklist.SetDelimiter(";");
            if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath, hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
            }
            errLabel_3 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist. Please review file structure and content, possibly required columns or entries are missing. System will abort"));
              return (ASWGLOBAL::BOOL::FALSE);
            }   /* end if from skip handler if no error */
          }
          if (l_str_Worklist_Extension == "xls")
          {
            onerror goto errLabel_4 ;
            err.Clear();
            t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
            t_hdlFile_Worklist.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Concentration", t_hdlFile_Worklist_Sample_Concentration, hslFloat);
            t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
            t_hdlFile_Worklist.AddField("Final_SampleConcentration", t_hdlFile_Worklist_FinalSampleConcentration, hslFloat);
            t_hdlFile_Worklist.AddField("Final_SampleVolume", t_hdlFile_Worklist_FinalSampleVolume, hslFloat);
            if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath + " " + "Sheet1$", hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
            }
            errLabel_4 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist. Please review file structure and content, possibly required columns or entries are missing. System will abort"));
              return (ASWGLOBAL::BOOL::FALSE);
            }   /* end if from skip handler if no error */
          }
          if (l_str_Worklist_Extension != "csv")
          {
            if (l_str_Worklist_Extension != "xls")
            {
              _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist (only .xls and .csv file formats are accepted). System will abort"));
              return (ASWGLOBAL::BOOL::FALSE);
            }
          }
        }
        {
          loopCounter2 = 0;
          while (
             (t_hdlFile_Worklist.Eof() == 0)
          )
          {
            loopCounter2 = loopCounter2 + 1;
            if( 0 == t_hdlFile_Worklist.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            l_int_NumberOfSamples_Source = l_int_NumberOfSamples_Source + 1;
            l_arr_str_SampleSourcePosition.AddAsLast(t_hdlFile_Worklist_Sample_Position);
            if (l_bln_NormalizeInOriginalSamplePlate == ASWGLOBAL::BOOL::FALSE)
            {
              l_arr_str_SampleTargetPosition.AddAsLast(t_hdlFile_Worklist_Target_Well);
            }
          }
        }
        if( 0 != t_hdlFile_Worklist.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        t_hdlFile_Worklist.RemoveFields();
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_int_NumberOfSamples_Source: "), l_int_NumberOfSamples_Source);
        if (l_bln_NormalizeInOriginalSamplePlate == ASWGLOBAL::BOOL::TRUE)
        {
          l_str_MultipleUsedSampleSourcePositions = Translate("");
          l_arr_str_MultipleUsedSampleSourcePositions.SetSize(0);
          ARRAYTOOLS::get_distinct_from_array(l_arr_str_SampleSourcePosition, l_arr_str_SampleSourcePosition_distinct);
          l_int_NumberOfSampleSourceWells_distinct=l_arr_str_SampleSourcePosition_distinct.GetSize();
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_int_NumberOfSampleSourceWells_distinct: "), l_int_NumberOfSampleSourceWells_distinct);
          l_arr_str_SampleSourcePosition_copy=l_arr_str_SampleSourcePosition;
          {
            for(loopCounter4 = 0; loopCounter4 < l_int_NumberOfSampleSourceWells_distinct;)
            {
              loopCounter4 = loopCounter4 + 1;
              ARRAYTOOLS::ArrayVLookUp(l_arr_str_SampleSourcePosition, l_arr_str_SampleSourcePosition_copy, l_arr_str_SampleSourcePosition_distinct.ElementAt( loopCounter4 -1), l_arr_str_Temp);
              l_int_NumberOfUseThisSample=l_arr_str_Temp.GetSize();
              if (l_int_NumberOfUseThisSample > 1)
              {
                l_arr_str_MultipleUsedSampleSourcePositions.AddAsLast(l_arr_str_SampleSourcePosition_distinct.ElementAt( loopCounter4 -1));
                if (l_str_MultipleUsedSampleSourcePositions == "")
                {
                  l_str_MultipleUsedSampleSourcePositions = l_arr_str_SampleSourcePosition_distinct.ElementAt( loopCounter4 -1);
                }
                else
                {
                  l_str_MultipleUsedSampleSourcePositions = StrConcat4(l_str_MultipleUsedSampleSourcePositions, Translate(", "), l_arr_str_SampleSourcePosition_distinct.ElementAt( loopCounter4 -1), Translate(""));
                }
              }
            }
          }
          l_int_NumberOfSamplesUsedMultipleTimes=l_arr_str_MultipleUsedSampleSourcePositions.GetSize();
          if (l_int_NumberOfSamplesUsedMultipleTimes > 0)
          {
            TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("l_arr_str_MultipleUsedSampleSourcePositions: "), l_arr_str_MultipleUsedSampleSourcePositions);
          }
        }
        else
        {
          l_str_MultipleUsedSampleTargetPositions = Translate("");
          l_arr_str_MultipleUsedSampleTargetPositions.SetSize(0);
          ARRAYTOOLS::get_distinct_from_array(l_arr_str_SampleTargetPosition, l_arr_str_SampleTargetPosition_distinct);
          l_int_NumberOfSampleTargetWells_distinct=l_arr_str_SampleTargetPosition_distinct.GetSize();
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_int_NumberOfSampleTargetWells_distinct: "), l_int_NumberOfSampleTargetWells_distinct);
          l_arr_str_SampleTargetPosition_copy=l_arr_str_SampleTargetPosition;
          {
            for(loopCounter4 = 0; loopCounter4 < l_int_NumberOfSampleTargetWells_distinct;)
            {
              loopCounter4 = loopCounter4 + 1;
              ARRAYTOOLS::ArrayVLookUp(l_arr_str_SampleTargetPosition, l_arr_str_SampleTargetPosition_copy, l_arr_str_SampleTargetPosition_distinct.ElementAt( loopCounter4 -1), l_arr_str_Temp);
              l_int_NumberOfUseThisSample=l_arr_str_Temp.GetSize();
              if (l_int_NumberOfUseThisSample > 1)
              {
                l_arr_str_MultipleUsedSampleTargetPositions.AddAsLast(l_arr_str_SampleTargetPosition_distinct.ElementAt( loopCounter4 -1));
                if (l_str_MultipleUsedSampleTargetPositions == "")
                {
                  l_str_MultipleUsedSampleTargetPositions = l_arr_str_SampleTargetPosition_distinct.ElementAt( loopCounter4 -1);
                }
                else
                {
                  l_str_MultipleUsedSampleTargetPositions = StrConcat4(l_str_MultipleUsedSampleTargetPositions, Translate(", "), l_arr_str_SampleTargetPosition_distinct.ElementAt( loopCounter4 -1), Translate(""));
                }
              }
            }
          }
          l_int_NumberOfSamplesUsedMultipleTimes=l_arr_str_MultipleUsedSampleTargetPositions.GetSize();
          if (l_int_NumberOfSamplesUsedMultipleTimes > 0)
          {
            TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("l_arr_str_MultipleUsedSampleTargetPositions: "), l_arr_str_MultipleUsedSampleTargetPositions);
          }
        }
        if (l_bln_NormalizeInOriginalSamplePlate == ASWGLOBAL::BOOL::TRUE)
        {
          if (l_str_Worklist_Extension == "csv")
          {
            onerror goto errLabel_5 ;
            err.Clear();
            t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Concentration", t_hdlFile_Worklist_Sample_Concentration, hslFloat);
            t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
            t_hdlFile_Worklist.AddField("Final_SampleConcentration", t_hdlFile_Worklist_FinalSampleConcentration, hslFloat);
            t_hdlFile_Worklist.SetDelimiter(";");
            if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath, hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
            }
            errLabel_5 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist. Please review file structure and content, possibly required columns or entries are missing. System will abort"));
              return (ASWGLOBAL::BOOL::FALSE);
            }   /* end if from skip handler if no error */
          }
          if (l_str_Worklist_Extension == "xls")
          {
            onerror goto errLabel_6 ;
            err.Clear();
            t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Concentration", t_hdlFile_Worklist_Sample_Concentration, hslFloat);
            t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
            t_hdlFile_Worklist.AddField("Final_SampleConcentration", t_hdlFile_Worklist_FinalSampleConcentration, hslFloat);
            if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath + " " + "Sheet1$", hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
            }
            errLabel_6 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist. Please review file structure and content, possibly required columns or entries are missing. System will abort"));
              return (ASWGLOBAL::BOOL::FALSE);
            }   /* end if from skip handler if no error */
          }
          t_hdlFile_Output.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
          t_hdlFile_Output.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
          t_hdlFile_Output.AddField("Sample_Concentration", t_hdlFile_Worklist_Sample_Concentration, hslFloat);
          t_hdlFile_Output.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
          t_hdlFile_Output.AddField("Final_SampleConcentration", t_hdlFile_Worklist_FinalSampleConcentration, hslFloat);
          t_hdlFile_Output.AddField("Final_SampleVolume", t_hdlFile_Worklist_FinalSampleVolume, hslFloat);
          t_hdlFile_Output.AddField("SampleStatus", t_hdlFile_Worklist_SampleStatus, hslString, 255);
          if( 0 == t_hdlFile_Output.Open(t_str_OutputFilePath + " " + "Sheet1", hslWrite) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_OutputFilePath, "HxMetEdCompCmd");
          }
        }
        else
        {
          if (l_str_Worklist_Extension == "csv")
          {
            onerror goto errLabel_7 ;
            err.Clear();
            t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
            t_hdlFile_Worklist.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Concentration", t_hdlFile_Worklist_Sample_Concentration, hslFloat);
            t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
            t_hdlFile_Worklist.AddField("Final_SampleConcentration", t_hdlFile_Worklist_FinalSampleConcentration, hslFloat);
            t_hdlFile_Worklist.AddField("Final_SampleVolume", t_hdlFile_Worklist_FinalSampleVolume, hslFloat);
            t_hdlFile_Worklist.SetDelimiter(";");
            if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath, hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
            }
            errLabel_7 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist. Please review file structure and content, possibly required columns or entries are missing. System will abort"));
              return (ASWGLOBAL::BOOL::FALSE);
            }   /* end if from skip handler if no error */
          }
          if (l_str_Worklist_Extension == "xls")
          {
            onerror goto errLabel_8 ;
            err.Clear();
            t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
            t_hdlFile_Worklist.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Concentration", t_hdlFile_Worklist_Sample_Concentration, hslFloat);
            t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
            t_hdlFile_Worklist.AddField("Final_SampleConcentration", t_hdlFile_Worklist_FinalSampleConcentration, hslFloat);
            t_hdlFile_Worklist.AddField("Final_SampleVolume", t_hdlFile_Worklist_FinalSampleVolume, hslFloat);
            if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath + " " + "Sheet1$", hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
            }
            errLabel_8 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist. Please review file structure and content, possibly required columns or entries are missing. System will abort"));
              return (ASWGLOBAL::BOOL::FALSE);
            }   /* end if from skip handler if no error */
          }
          t_hdlFile_Output.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
          t_hdlFile_Output.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
          t_hdlFile_Output.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
          t_hdlFile_Output.AddField("Sample_Concentration", t_hdlFile_Worklist_Sample_Concentration, hslFloat);
          t_hdlFile_Output.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
          t_hdlFile_Output.AddField("Final_SampleConcentration", t_hdlFile_Worklist_FinalSampleConcentration, hslFloat);
          t_hdlFile_Output.AddField("Final_SampleVolume", t_hdlFile_Worklist_FinalSampleVolume, hslFloat);
          t_hdlFile_Output.AddField("SampleStatus", t_hdlFile_Worklist_SampleStatus, hslString, 255);
          if( 0 == t_hdlFile_Output.Open(t_str_OutputFilePath + " " + "Sheet1", hslWrite) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_str_OutputFilePath, "HxMetEdCompCmd");
          }
        }
        {
          loopCounter1 = 0;
          while (
             (t_hdlFile_Worklist.Eof() == 0)
          )
          {
            loopCounter1 = loopCounter1 + 1;
            if( 0 == t_hdlFile_Worklist.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            l_flt_Volume_SampleAspirate = 0.0;
            l_flt_Volume_DiluentAspirate = 0.0;
            l_flt_Volume_Total = 0.0;
            if (l_bln_NormalizeInOriginalSamplePlate == ASWGLOBAL::BOOL::TRUE)
            {
              l_arr_int_NumberOfUseSample.SetSize(l_int_NumberOfSamplesUsedMultipleTimes);
              if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
              {
                TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, Translate(" t_hdlFile_Worklist_Sample_ID: "), t_hdlFile_Worklist_Sample_ID, Translate("  t_hdlFile_Worklist_Sample_Position: "), t_hdlFile_Worklist_Sample_Position, Translate("  t_hdlFile_Worklist_Sample_Concentration: "), t_hdlFile_Worklist_Sample_Concentration, Translate(""), Translate(""), Translate("  t_hdlFile_Worklist_OriginalSampleVolume: "), t_hdlFile_Worklist_OriginalSampleVolume);
              }
              l_flt_Volume_Total = (t_hdlFile_Worklist_OriginalSampleVolume * t_hdlFile_Worklist_Sample_Concentration)/ t_hdlFile_Worklist_FinalSampleConcentration;
              l_flt_Volume_DiluentAspirate = (l_flt_Volume_Total - t_hdlFile_Worklist_OriginalSampleVolume);
              l_flt_Volume_DiluentAspirate = MthRound(l_flt_Volume_DiluentAspirate, 1);
              l_flt_Volume_Total = MthRound(l_flt_Volume_Total, 1);
              t_hdlFile_Worklist_FinalSampleVolume = l_flt_Volume_Total;
              if (l_flt_Volume_Total <= i_flt_MaximumVolumePerContainer)
              {
                if (t_hdlFile_Worklist_Sample_Concentration >= t_hdlFile_Worklist_FinalSampleConcentration)
                {
                  l_bln_SampleExcluded = ASWGLOBAL::BOOL::FALSE;
                  {
                    for(loopCounter5 = 0; loopCounter5 < l_int_NumberOfSamplesUsedMultipleTimes;)
                    {
                      loopCounter5 = loopCounter5 + 1;
                      if (t_hdlFile_Worklist_Sample_Position == l_arr_str_MultipleUsedSampleSourcePositions.ElementAt( loopCounter5 -1))
                      {
                        l_int_NumberOfUseThisSample=l_arr_int_NumberOfUseSample.GetAt(loopCounter5-1);
                        if (l_int_NumberOfUseThisSample == 0)
                        {
                        l_int_NumberOfUseThisSample = 1;
                        }
                        else
                        {
                        l_int_NumberOfUseThisSample = l_int_NumberOfUseThisSample + 1;
                        l_bln_SampleExcluded = ASWGLOBAL::BOOL::TRUE;
                        t_hdlFile_Worklist_SampleStatus = Translate("Excluded - Sample used multiple times.");
                        }
                        l_arr_int_NumberOfUseSample.SetAt(loopCounter5-1, l_int_NumberOfUseThisSample);
                      }
                    }
                  }
                  if (l_bln_SampleExcluded == ASWGLOBAL::BOOL::FALSE)
                  {
                    t_hdlFile_Worklist_SampleStatus = Translate("Processed");
                    o_int_NumberOfSamples = o_int_NumberOfSamples + 1;
                    if (l_flt_Volume_DiluentAspirate >= l_flt_Volume_MinimumToPipetteDiluent)
                    {
                      SeqAdd(o_seq_Disp_Diluent, l_str_LabwareID_SamplePlate, t_hdlFile_Worklist_Sample_Position);
                      o_arr_flt_Volumes_Diluent.AddAsLast(l_flt_Volume_DiluentAspirate);
                      o_flt_Diluent_TotalVolume = o_flt_Diluent_TotalVolume + l_flt_Volume_DiluentAspirate;
                    }
                  }
                }
                else
                {
                  l_bln_SampleExcluded = ASWGLOBAL::BOOL::TRUE;
                  t_hdlFile_Worklist_SampleStatus = Translate("Excluded - Sample concentration too low");
                }
              }
              else
              {
                l_bln_SampleExcluded = ASWGLOBAL::BOOL::TRUE;
                t_hdlFile_Worklist_SampleStatus = Translate("Excluded - Concentration too high (Maximum capacity of container exceeded)");
              }
              if (l_bln_SampleExcluded == ASWGLOBAL::BOOL::TRUE)
              {
                l_int_NumberOfSamples_Excluded = l_int_NumberOfSamples_Excluded + 1;
              }
              if( 0 == t_hdlFile_Output.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
            else
            {
              l_arr_int_NumberOfUseSample.SetSize(l_int_NumberOfSamplesUsedMultipleTimes);
              TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, Translate(" t_hdlFile_Worklist_Sample_ID: "), t_hdlFile_Worklist_Sample_ID, Translate("  t_hdlFile_Worklist_Sample_Position: "), t_hdlFile_Worklist_Sample_Position, Translate("  t_hdlFile_Worklist_Sample_Concentration: "), t_hdlFile_Worklist_Sample_Concentration, Translate("  t_hdlFile_Worklist_Target_Well: "), t_hdlFile_Worklist_Target_Well, Translate("  t_hdlFile_Worklist_OriginalSampleVolume: "), t_hdlFile_Worklist_OriginalSampleVolume);
              l_flt_Volume_SampleAspirate = (t_hdlFile_Worklist_FinalSampleVolume * t_hdlFile_Worklist_FinalSampleConcentration)/t_hdlFile_Worklist_Sample_Concentration;
              l_flt_Volume_DiluentAspirate = t_hdlFile_Worklist_FinalSampleVolume - l_flt_Volume_SampleAspirate;
              l_flt_Volume_DiluentAspirate = MthRound(l_flt_Volume_DiluentAspirate, 1);
              l_flt_Volume_SampleAspirate = MthRound(l_flt_Volume_SampleAspirate, 1);
              if (t_hdlFile_Worklist_FinalSampleVolume <= i_flt_MaximumVolumePerContainer)
              {
                if (l_flt_Volume_SampleAspirate >= l_flt_Volume_MinimumToPipette)
                {
                  if (l_flt_Volume_SampleAspirate <= t_hdlFile_Worklist_FinalSampleVolume)
                  {
                    if (t_hdlFile_Worklist_OriginalSampleVolume >= l_flt_Volume_SampleAspirate)
                    {
                      l_bln_SampleExcluded = ASWGLOBAL::BOOL::FALSE;
                      {
                        for(loopCounter5 = 0; loopCounter5 < l_int_NumberOfSamplesUsedMultipleTimes;)
                        {
                        loopCounter5 = loopCounter5 + 1;
                        if (t_hdlFile_Worklist_Target_Well == l_arr_str_MultipleUsedSampleTargetPositions.ElementAt( loopCounter5 -1))
                        {
                        l_int_NumberOfUseThisSample=l_arr_int_NumberOfUseSample.GetAt(loopCounter5-1);
                        if (l_int_NumberOfUseThisSample == 0)
                        {
                        l_int_NumberOfUseThisSample = 1;
                        }
                        else
                        {
                        l_int_NumberOfUseThisSample = l_int_NumberOfUseThisSample + 1;
                        l_bln_SampleExcluded = ASWGLOBAL::BOOL::TRUE;
                        t_hdlFile_Worklist_SampleStatus = Translate("Excluded - Sample target position used multiple times");
                        }
                        l_arr_int_NumberOfUseSample.SetAt(loopCounter5-1, l_int_NumberOfUseThisSample);
                        }
                        }
                      }
                      if (l_bln_SampleExcluded == ASWGLOBAL::BOOL::FALSE)
                      {
                        t_hdlFile_Worklist_SampleStatus = Translate("Processed");
                        o_int_NumberOfSamples = o_int_NumberOfSamples + 1;
                        SeqAdd(o_seq_Asp_Samples, l_str_LabwareID_SamplePlate, t_hdlFile_Worklist_Sample_Position);
                        SeqAdd(o_seq_Disp_Samples, l_str_LabwareID_NormalizationPlate, t_hdlFile_Worklist_Target_Well);
                        o_arr_flt_Volumes_Sample.AddAsLast(l_flt_Volume_SampleAspirate);
                      }
                    }
                    else
                    {
                      l_bln_SampleExcluded = ASWGLOBAL::BOOL::TRUE;
                      t_hdlFile_Worklist_SampleStatus = Translate("Excluded - Not enough volume to aspirate sample");
                    }
                  }
                  else
                  {
                    l_bln_SampleExcluded = ASWGLOBAL::BOOL::TRUE;
                    t_hdlFile_Worklist_SampleStatus = Translate("Excluded - Sample concentration too low");
                  }
                }
                else
                {
                  l_bln_SampleExcluded = ASWGLOBAL::BOOL::TRUE;
                  t_hdlFile_Worklist_SampleStatus = Translate("Excluded - Sample concentration too high (Sample volume to aspirate below minimum allowed)");
                }
              }
              else
              {
                l_bln_SampleExcluded = ASWGLOBAL::BOOL::TRUE;
                t_hdlFile_Worklist_SampleStatus = Translate("Excluded - Final sample volume exceeds maximum volume allowed per container");
              }
              if (l_bln_SampleExcluded == ASWGLOBAL::BOOL::FALSE)
              {
                if (l_flt_Volume_DiluentAspirate >= l_flt_Volume_MinimumToPipetteDiluent)
                {
                  if (l_flt_Volume_DiluentAspirate <= t_hdlFile_Worklist_FinalSampleVolume)
                  {
                    SeqAdd(o_seq_Disp_Diluent, l_str_LabwareID_NormalizationPlate, t_hdlFile_Worklist_Target_Well);
                    o_arr_flt_Volumes_Diluent.AddAsLast(l_flt_Volume_DiluentAspirate);
                    o_flt_Diluent_TotalVolume = o_flt_Diluent_TotalVolume + l_flt_Volume_DiluentAspirate;
                  }
                }
              }
              else
              {
                l_int_NumberOfSamples_Excluded = l_int_NumberOfSamples_Excluded + 1;
              }
              if( 0 == t_hdlFile_Output.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
        }
        if( 0 != t_hdlFile_Worklist.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        t_hdlFile_Worklist.RemoveFields();
        if( 0 != t_hdlFile_Output.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        t_hdlFile_Output.RemoveFields();
        o_str_FilePath_OutputFile = t_str_OutputFilePath;
        if (l_int_NumberOfSamples_Excluded > 0)
        {
          l_arr_strTokens.SetSize(0);
          if (l_int_NumberOfSamples_Excluded == l_int_NumberOfSamples_Source)
          {
            l_str_Message = StrConcat12(Translate("Number of samples excluded for this run = "), l_int_NumberOfSamples_Excluded, Translate("\n\nALL SAMPLES ARE EXCLUDED. Please review worklist and input parameters "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            STRTOKENIZE::StrTokenize(l_strFunctionName, Translate("::"), l_arr_strTokens, ASWGLOBAL::BOOL::TRUE);
            l_int_ReturnValue = VectorCustomDialogs::MessageDialog(l_arr_strTokens.ElementAt( 3 -1), 3, 5, 0, 0, 0, l_str_Message);
            if (l_int_ReturnValue == 4)
            {
              _Display_InputWorklist_Dialog(i_str_WorklistFilePath);
            }
            else
            {
              if (l_int_ReturnValue == 2)
              {
                return (ASWGLOBAL::DIALOG::ABORT);
              }
            }
          }
          else
          {
            if (i_bln_AllowCostumerIntervention == ASWGLOBAL::BOOL::TRUE)
            {
              if (l_bln_NormalizeInOriginalSamplePlate == ASWGLOBAL::BOOL::TRUE)
              {
                if (l_int_NumberOfSamplesUsedMultipleTimes > 0)
                {
                  l_str_Message = StrConcat12(Translate("Number of samples excluded for this run = "), l_int_NumberOfSamples_Excluded, Translate("\n\nData has been logged into the following file: "), Translate("\n"), o_str_FilePath_OutputFile, Translate("\n\nPlease note that "), l_int_NumberOfSamplesUsedMultipleTimes, Translate(" samples ("), l_str_MultipleUsedSampleSourcePositions, Translate(") are used multiple times."), Translate(""), Translate(""));
                }
                else
                {
                  l_str_Message = StrConcat12(Translate("Number of samples excluded for this run = "), l_int_NumberOfSamples_Excluded, Translate("\n\nData has been logged into the following file: "), Translate("\n"), o_str_FilePath_OutputFile, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                }
              }
              else
              {
                if (l_int_NumberOfSamplesUsedMultipleTimes > 0)
                {
                  l_str_Message = StrConcat12(Translate("Number of samples excluded for this run = "), l_int_NumberOfSamples_Excluded, Translate("\n\nData has been logged into the following file: "), Translate("\n"), o_str_FilePath_OutputFile, Translate("\n\nPlease note that "), l_int_NumberOfSamplesUsedMultipleTimes, Translate(" samples ("), l_str_MultipleUsedSampleTargetPositions, Translate(") are used multiple times."), Translate(""), Translate(""));
                }
                else
                {
                  l_str_Message = StrConcat12(Translate("Number of samples excluded for this run = "), l_int_NumberOfSamples_Excluded, Translate("\n\nData has been logged into the following file: "), Translate("\n"), o_str_FilePath_OutputFile, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                }
              }
              Trace("l_str_Message:",l_str_Message);
              l_str_Message = StrConcat12(l_str_Message, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\n\nPress IGNORE to continue run without excluded samples."), Translate("\nPress RETRY to load a new worklist"), Translate("\nPress ABORT to abort the run"), Translate(""));
              STRTOKENIZE::StrTokenize(l_strFunctionName, Translate("::"), l_arr_strTokens, ASWGLOBAL::BOOL::TRUE);
              l_int_ReturnValue = VectorCustomDialogs::MessageDialog(l_arr_strTokens.ElementAt( 3 -1), 3, 7, 0, 0, 0, l_str_Message);
              if (l_int_ReturnValue == 4)
              {
                _Display_InputWorklist_Dialog(i_str_WorklistFilePath);
              }
              else
              {
                if (l_int_ReturnValue == 5)
                {
                  break;
                }
                else
                {
                  return (ASWGLOBAL::DIALOG::ABORT);
                }
              }
            }
            else
            {
              break;
            }
          }
        }
        else
        {
          break;
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("o_str_FilePath_OutputFile: "), o_str_FilePath_OutputFile);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("o_int_NumberOfSamples: "), o_int_NumberOfSamples);
    o_seq_Asp_Samples.SetCurrentPosition(1);
    o_seq_Disp_Samples.SetCurrentPosition(1);
    o_seq_Disp_Diluent.SetCurrentPosition(1);
    if (l_bln_NormalizeInOriginalSamplePlate == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seq_Asp_Samples);
      TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seq_Disp_Samples);
      TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("o_arr_flt_Volumes_Sample: "), o_arr_flt_Volumes_Sample);
    }
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seq_Disp_Diluent);
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("o_arr_flt_Volumes_Diluent: "), o_arr_flt_Volumes_Diluent);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("o_flt_Diluent_TotalVolume: "), o_flt_Diluent_TotalVolume);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _Version_history(  ) void {
  }

  function Pooling_ByVolume( variable i_str_WorklistFilePath, sequence i_seq_SourceSamplePlate, sequence i_seq_Pooling, variable i_flt_MaximumVolumePerContainer, variable i_bln_AllowCostumerIntervention, sequence & o_seq_Asp_Samples, sequence & o_seq_Disp_Samples, variable & o_arr_flt_Volumes_Sample[], variable & o_int_NumberOfPools, variable & o_arr_str_PostionIDsPools[], variable & o_arr_flt_Volumes_Pools[], variable & o_str_FilePath_OutputFile, device & ML_STAR ) variable {
    private variable l_bln_ReloadWorklist;
    private variable l_int_ReturnValue;
    private variable l_flt_Volume_SampleAspirate;
    private variable l_str_Worklist_Extension;
    private variable CounterWorklistReloading;
    private variable loopCounter3;
    private variable l_flt_VolumePerPool;
    private variable l_str_Worklist_FileName;
    private variable l_flt_Volume_MinimumToPipette;
    private variable l_arr_strTokens[];
    private variable l_int_NumberOfSamples_Source;
    private variable l_bln_UseVolumePerPoolFromWorklist;
    private variable l_int_NumberOfSamplesUsedMultipleTimes;
    private variable l_int_NumberOfUseThisSample;
    private variable l_int_NumberOfSamples;
    private variable l_str_MultipleUsedSampleSourcePositions;
    private variable l_arr_str_Temp[];
    private variable l_arr_str_SampleSourcePosition[];
    private variable l_arr_str_SampleSourcePosition_distinct[];
    private variable l_arr_str_SampleSourcePosition_copy[];
    private variable l_arr_str_MultipleUsedSampleSourcePositions[];
    private variable l_int_NumberOfPools;
    private variable l_arr_flt_VolumePerPool[];
    private variable l_arr_str_Pool_Ids[];
    private variable l_arr_int_NumberOfSamplesPerPool[];
    private variable l_bln_PoolProcessed;
    private variable l_str_CurrentPoolId;
    private variable l_bln_FileExists;
    private variable l_bln_ExcludePool;
    private variable l_str_Message;
    private variable l_str_LabwareID_Pooling;
    private variable l_str_ExcludePool;
    private variable l_strSQL_Sentence1;
    private variable l_int_NumberOfSamples_Excluded;
    private variable l_flt_TotalVolumeCurrentPool;
    private variable l_bln_ExcludeSample;
    private variable l_flt_TotalVolumePerSample;
    private variable l_bln_Repeat_Analysis;
    private variable l_int_Counter_RepeatAnalysis;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable l_flt_Volume_Total;
    private variable l_int_TotalNumberOfSamples_Excluded;
    private variable l_str_LabwareID_SamplePlate;
    private variable l_int_Counter_Pool;
    private variable l_arr_Dummy[];
    private variable l_arr_flt_TotalVolumePerSample[];
    private variable l_arr_int_TotalNumberOfUsePerSample[];
    private variable l_arr_int_NumberOfSamplesPerPool_current[];
    private variable l_arr_flt_TotalVolumePerPool[];
    private variable l_arr_flt_Volumes_Sample[];
    private variable l_arr_str_Pool_Ids_current[];
    private variable l_arr_flt_VolumePerPool_current[];
    private variable loopCounter5;
    private variable l_strFunctionName;
    { sequence __temp; o_seq_Asp_Samples = __temp; }
    { sequence __temp; o_seq_Disp_Samples = __temp; }
    o_arr_flt_Volumes_Sample.SetSize( 0);
    o_int_NumberOfPools = 0;
    o_arr_str_PostionIDsPools.SetSize( 0);
    o_arr_flt_Volumes_Pools.SetSize( 0);
    o_str_FilePath_OutputFile = 0;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    {
      CounterWorklistReloading = 0;
      while (1 == 1)
      {
        CounterWorklistReloading = CounterWorklistReloading + 1;
        l_bln_ReloadWorklist = ASWGLOBAL::BOOL::FALSE;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_str_WorklistFilePath: "), i_str_WorklistFilePath);
        l_flt_Volume_MinimumToPipette = 2;
        o_arr_flt_Volumes_Sample.SetSize(0);
        l_str_Worklist_FileName = HSLExtensions::File::GetFileNameWithoutExtension(i_str_WorklistFilePath);
        l_str_Worklist_Extension = HSLExtensions::File::GetFileExtension(i_str_WorklistFilePath);
        t_str_OutputFilePath = StrConcat12(t_strLogFilesDirectory, Translate("\\"), t_strKitTitle, Translate("_"), Translate("PoolingOutput"), Translate("_"), t_str_Date, Translate("_"), t_str_Time, Translate("."), Translate("xls"), Translate(""));
        t_str_TemplateFilePath = StrConcat12(t_strLogFilesDirectory, Translate("\\"), t_strKitTitle, Translate("_"), Translate("PoolingTemplate"), Translate("_"), t_str_Date, Translate("_"), t_str_Time, Translate("."), Translate("xls"), Translate(""));
        t_str_ExcludedSamplesFilePath = StrConcat12(t_strLogFilesDirectory, Translate("\\"), t_strKitTitle, Translate("_"), Translate("PoolingExcludedSamples"), Translate("_"), t_str_Date, Translate("_"), t_str_Time, Translate("."), Translate("xls"), Translate(""));
        l_flt_Volume_SampleAspirate = 0.0;
        l_flt_VolumePerPool = 0.0;
        l_flt_VolumePerPool = 0.0;
        if (l_str_Worklist_Extension == "csv")
        {
          onerror goto errLabel_9 ;
          err.Clear();
          t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
          t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
          t_hdlFile_Worklist.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
          t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
          t_hdlFile_Worklist.AddField("Volume_ToAspirate", t_hdlFile_Worklist_VolumeToAspirate, hslFloat);
          t_hdlFile_Worklist.AddField("Volume_PerPool", t_hdlFile_Worklist_VolumePerPool, hslFloat);
          t_hdlFile_Worklist.SetDelimiter(";");
          if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath, hslRead) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
          }
          if( 0 == t_hdlFile_Worklist.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 != t_hdlFile_Worklist.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          t_hdlFile_Worklist.RemoveFields();
          t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
          t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
          t_hdlFile_Worklist.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
          t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
          t_hdlFile_Worklist.AddField("Volume_ToAspirate", t_hdlFile_Worklist_VolumeToAspirate, hslFloat);
          t_hdlFile_Worklist.AddField("Volume_PerPool", t_hdlFile_Worklist_VolumePerPool, hslFloat);
          t_hdlFile_Worklist.SetDelimiter(";");
          if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath, hslRead) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
          }
          l_bln_UseVolumePerPoolFromWorklist = ASWGLOBAL::BOOL::TRUE;
          errLabel_9 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            onerror goto errLabel_10 ;
            err.Clear();
            if( 0 != t_hdlFile_Worklist.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            t_hdlFile_Worklist.RemoveFields();
            t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
            t_hdlFile_Worklist.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
            t_hdlFile_Worklist.AddField("Volume_ToAspirate", t_hdlFile_Worklist_VolumeToAspirate, hslFloat);
            t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
            t_hdlFile_Worklist.SetDelimiter(";");
            if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath, hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
            }
            if( 0 == t_hdlFile_Worklist.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 != t_hdlFile_Worklist.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            t_hdlFile_Worklist.RemoveFields();
            t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
            t_hdlFile_Worklist.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
            t_hdlFile_Worklist.AddField("Volume_ToAspirate", t_hdlFile_Worklist_VolumeToAspirate, hslFloat);
            t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
            t_hdlFile_Worklist.SetDelimiter(";");
            if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath, hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
            }
            l_bln_UseVolumePerPoolFromWorklist = ASWGLOBAL::BOOL::FALSE;
            errLabel_10 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist. Please review file structure and content, possibly required columns or entries are missing. System will abort"));
              return (ASWGLOBAL::BOOL::FALSE);
            }   /* end if from skip handler if no error */
          }   /* end if from skip handler if no error */
        }
        if (l_str_Worklist_Extension == "xls")
        {
          onerror goto errLabel_11 ;
          err.Clear();
          t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
          t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
          t_hdlFile_Worklist.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
          t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
          t_hdlFile_Worklist.AddField("Volume_ToAspirate", t_hdlFile_Worklist_VolumeToAspirate, hslFloat);
          t_hdlFile_Worklist.AddField("Volume_PerPool", t_hdlFile_Worklist_VolumePerPool, hslFloat);
          if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath + " " + "Sheet1$", hslRead) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
          }
          if( 0 == t_hdlFile_Worklist.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 != t_hdlFile_Worklist.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          t_hdlFile_Worklist.RemoveFields();
          t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
          t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
          t_hdlFile_Worklist.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
          t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
          t_hdlFile_Worklist.AddField("Volume_ToAspirate", t_hdlFile_Worklist_VolumeToAspirate, hslFloat);
          t_hdlFile_Worklist.AddField("Volume_PerPool", t_hdlFile_Worklist_VolumePerPool, hslFloat);
          if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath + " " + "Sheet1$", hslRead) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
          }
          l_bln_UseVolumePerPoolFromWorklist = ASWGLOBAL::BOOL::TRUE;
          errLabel_11 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            onerror goto errLabel_12 ;
            err.Clear();
            if( 0 != t_hdlFile_Worklist.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            t_hdlFile_Worklist.RemoveFields();
            t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
            t_hdlFile_Worklist.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
            t_hdlFile_Worklist.AddField("Volume_ToAspirate", t_hdlFile_Worklist_VolumeToAspirate, hslFloat);
            t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
            if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath + " " + "Sheet1$", hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
            }
            if( 0 == t_hdlFile_Worklist.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 != t_hdlFile_Worklist.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            t_hdlFile_Worklist.RemoveFields();
            t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
            t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
            t_hdlFile_Worklist.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
            t_hdlFile_Worklist.AddField("Volume_ToAspirate", t_hdlFile_Worklist_VolumeToAspirate, hslFloat);
            t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
            if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath + " " + "Sheet1$", hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
            }
            l_bln_UseVolumePerPoolFromWorklist = ASWGLOBAL::BOOL::FALSE;
            errLabel_12 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist. Please review file structure and content, possibly required columns or entries are missing. System will abort"));
              return (ASWGLOBAL::BOOL::FALSE);
            }   /* end if from skip handler if no error */
          }   /* end if from skip handler if no error */
        }
        if (l_str_Worklist_Extension != "csv")
        {
          if (l_str_Worklist_Extension != "xls")
          {
            _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist (only .xls and .csv file formats are accepted). System will abort"));
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
        TrcTrace4(Translate(" l_bln_UseVolumePerPoolFromWorklist: "), l_bln_UseVolumePerPoolFromWorklist, Translate(""), Translate(""));
        _PoolingFileOpen(t_str_TemplateFilePath, Translate(""), 2, 2, t_hdlFile_Template);
        {
          loopCounter3 = 0;
          while (
             (t_hdlFile_Worklist.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == t_hdlFile_Worklist.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            t_hdlFile_Worklist_SampleStatus = Translate("Processed");
            if (l_bln_UseVolumePerPoolFromWorklist == ASWGLOBAL::BOOL::TRUE)
            {
              t_hdlFile_Worklist_VolumeToAspirate = 0.0;
            }
            else
            {
              t_hdlFile_Worklist_VolumePerPool = 0.0;
            }
            if( 0 == t_hdlFile_Template.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            l_int_NumberOfSamples_Source = loopCounter3;
          }
        }
        if( 0 != t_hdlFile_Template.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        t_hdlFile_Template.RemoveFields();
        if( 0 != t_hdlFile_Worklist.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        t_hdlFile_Worklist.RemoveFields();
        _PoolingFileOpen(t_str_OutputFilePath, Translate(""), 2, 2, t_hdlFile_Output);
        if( 0 != t_hdlFile_Output.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        t_hdlFile_Output.RemoveFields();
        _PoolingFileOpen(t_str_ExcludedSamplesFilePath, Translate(""), 2, 2, t_hdlFile_Excluded);
        if( 0 != t_hdlFile_Excluded.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        t_hdlFile_Excluded.RemoveFields();
        l_str_MultipleUsedSampleSourcePositions = Translate("");
        l_arr_str_SampleSourcePosition.SetSize(0);
        l_arr_str_MultipleUsedSampleSourcePositions.SetSize(0);
        if (l_str_Worklist_Extension == "csv")
        {
          onerror goto errLabel_13 ;
          err.Clear();
          t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
          t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
          t_hdlFile_Worklist.SetDelimiter(";");
          if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath, hslRead) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
          }
          errLabel_13 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist. Please review file structure and content, possibly required columns or entries are missing. System will abort"));
            return (ASWGLOBAL::BOOL::FALSE);
          }   /* end if from skip handler if no error */
        }
        if (l_str_Worklist_Extension == "xls")
        {
          onerror goto errLabel_14 ;
          err.Clear();
          t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
          t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
          if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath + " " + "Sheet1$", hslRead) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
          }
          errLabel_14 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist. Please review file structure and content, possibly required columns or entries are missing. System will abort"));
            return (ASWGLOBAL::BOOL::FALSE);
          }   /* end if from skip handler if no error */
        }
        {
          loopCounter3 = 0;
          while (
             (t_hdlFile_Worklist.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == t_hdlFile_Worklist.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            l_arr_str_SampleSourcePosition.AddAsLast(t_hdlFile_Worklist_Sample_Position);
          }
        }
        if( 0 != t_hdlFile_Worklist.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        t_hdlFile_Worklist.RemoveFields();
        l_arr_str_SampleSourcePosition_copy=l_arr_str_SampleSourcePosition;
        ARRAYTOOLS::get_distinct_from_array(l_arr_str_SampleSourcePosition, l_arr_str_SampleSourcePosition_distinct);
        l_int_NumberOfSamples=l_arr_str_SampleSourcePosition_distinct.GetSize();
        {
          for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfSamples;)
          {
            loopCounter3 = loopCounter3 + 1;
            ARRAYTOOLS::ArrayVLookUp(l_arr_str_SampleSourcePosition, l_arr_str_SampleSourcePosition_copy, l_arr_str_SampleSourcePosition_distinct.ElementAt( loopCounter3 -1), l_arr_str_Temp);
            l_int_NumberOfUseThisSample=l_arr_str_Temp.GetSize();
            if (l_int_NumberOfUseThisSample > 1)
            {
              l_arr_str_MultipleUsedSampleSourcePositions.AddAsLast(l_arr_str_SampleSourcePosition_distinct.ElementAt( loopCounter3 -1));
              if (l_str_MultipleUsedSampleSourcePositions == "")
              {
                l_str_MultipleUsedSampleSourcePositions = l_arr_str_SampleSourcePosition_distinct.ElementAt( loopCounter3 -1);
              }
              else
              {
                l_str_MultipleUsedSampleSourcePositions = StrConcat4(l_str_MultipleUsedSampleSourcePositions, Translate(", "), l_arr_str_SampleSourcePosition_distinct.ElementAt( loopCounter3 -1), Translate(""));
              }
            }
          }
        }
        l_int_NumberOfSamplesUsedMultipleTimes=l_arr_str_MultipleUsedSampleSourcePositions.GetSize();
        if (l_int_NumberOfSamplesUsedMultipleTimes > 0)
        {
          TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_str_MultipleUsedSampleSourcePositions: "), l_arr_str_MultipleUsedSampleSourcePositions);
        }
        _GetPoolInfo(t_str_TemplateFilePath, Translate(""), t_intTraceLevel, t_hdlFile_Template, 2, l_arr_str_Pool_Ids, l_arr_int_NumberOfSamplesPerPool, l_arr_Dummy, l_arr_Dummy, l_arr_flt_VolumePerPool);
        l_int_NumberOfPools=l_arr_str_Pool_Ids.GetSize();
        l_bln_Repeat_Analysis = ASWGLOBAL::BOOL::TRUE;
        _PoolingFileOpen(t_str_ExcludedSamplesFilePath, Translate(""), 3, 2, t_hdlFile_Excluded);
        l_int_TotalNumberOfSamples_Excluded = 0;
        l_bln_ExcludeSample = ASWGLOBAL::BOOL::FALSE;
        {
          l_int_Counter_RepeatAnalysis = 0;
          while (l_bln_Repeat_Analysis == ASWGLOBAL::BOOL::TRUE)
          {
            l_int_Counter_RepeatAnalysis = l_int_Counter_RepeatAnalysis + 1;
            l_bln_FileExists = HSLExtensions::File::Exists(t_str_OutputFilePath);
            if (l_bln_FileExists == ASWGLOBAL::BOOL::FALSE)
            {
              _PoolingFileOpen(t_str_OutputFilePath, Translate(""), 2, 2, t_hdlFile_Output);
              if( 0 != t_hdlFile_Output.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              t_hdlFile_Output.RemoveFields();
            }
            _PoolingFileOpen(t_str_OutputFilePath, Translate(""), 3, 2, t_hdlFile_Output);
            l_arr_flt_TotalVolumePerPool.SetSize(0);
            l_arr_flt_TotalVolumePerSample.SetSize(0);
            l_arr_flt_TotalVolumePerSample.SetSize(l_int_NumberOfSamplesUsedMultipleTimes);
            l_arr_int_TotalNumberOfUsePerSample.SetSize(0);
            l_arr_int_TotalNumberOfUsePerSample.SetSize(l_int_NumberOfSamplesUsedMultipleTimes);
            o_arr_flt_Volumes_Pools.SetSize(0);
            o_arr_str_PostionIDsPools.SetSize(0);
            l_arr_flt_Volumes_Sample.SetSize(0);
            l_int_NumberOfSamples_Excluded = 0;
            SeqRemoveAll(o_seq_Asp_Samples);
            SeqRemoveAll(o_seq_Disp_Samples);
            {
              for(l_int_Counter_Pool = 0; l_int_Counter_Pool < l_int_NumberOfPools;)
              {
                l_int_Counter_Pool = l_int_Counter_Pool + 1;
                l_bln_ExcludePool = ASWGLOBAL::BOOL::FALSE;
                l_bln_PoolProcessed = ASWGLOBAL::BOOL::FALSE;
                l_flt_VolumePerPool = 0.0;
                l_str_CurrentPoolId=l_arr_str_Pool_Ids.GetAt(l_int_Counter_Pool-1);
                if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
                {
                  Trace("*****************************************","");
                  Trace("------> Pool Id = ",l_str_CurrentPoolId);
                  Trace("------> Data analysis number: ", l_int_Counter_RepeatAnalysis);
                  Trace("","");
                }
                l_flt_TotalVolumeCurrentPool=l_arr_flt_VolumePerPool.GetAt(l_int_Counter_Pool-1);
                l_str_LabwareID_Pooling = SeqGetLabwareId(i_seq_Pooling);
                l_str_LabwareID_SamplePlate = SeqGetLabwareId(i_seq_SourceSamplePlate);
                if (l_bln_UseVolumePerPoolFromWorklist == ASWGLOBAL::BOOL::TRUE)
                {
                  if (l_flt_TotalVolumeCurrentPool > i_flt_MaximumVolumePerContainer)
                  {
                    l_bln_ExcludePool = ASWGLOBAL::BOOL::TRUE;
                    l_str_ExcludePool = Translate("Excluded - Total Volume of Pool exceeds maximum labware capacity");
                  }
                }
                l_arr_flt_TotalVolumePerPool.SetSize(l_int_NumberOfPools);
                l_strSQL_Sentence1 = StrConcat12("Select * from [Sheet1$] where [Target_Well] = '",l_str_CurrentPoolId,"' and [SampleStatus] = 'Processed'","","","","","","","","","");
                TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_strSQL_Sentence1: "), l_strSQL_Sentence1);
                TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("t_str_TemplateFilePath: "), t_str_TemplateFilePath);
                l_int_ReturnValue = _GetPoolInfo(t_str_TemplateFilePath, l_strSQL_Sentence1, ASWGLOBAL::BOOL::FALSE, t_hdlFile_Template, 2, l_arr_str_Pool_Ids_current, l_arr_int_NumberOfSamplesPerPool_current, l_arr_Dummy, l_arr_Dummy, l_arr_flt_VolumePerPool_current);
                if (l_int_ReturnValue == -2)
                {
                  l_bln_ExcludePool = ASWGLOBAL::BOOL::TRUE;
                  l_str_ExcludePool = Translate("Excluded - Total Volume in Pool not equal.");
                }
                _PoolingFileOpen(t_str_TemplateFilePath, l_strSQL_Sentence1, 1, 2, t_hdlFile_Template);
                {
                  loopCounter1 = 0;
                  while (
                     (t_hdlFile_Template.Eof() == 0)
                  )
                  {
                    loopCounter1 = loopCounter1 + 1;
                    if( 0 == t_hdlFile_Template.ReadRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
                    {
                      TRACELEVEL::Trace_10(t_intTraceLevel, Translate(" t_hdlFile_Worklist_Sample_ID: "), t_hdlFile_Worklist_Sample_ID, Translate("  t_hdlFile_Worklist_Sample_Position: "), t_hdlFile_Worklist_Sample_Position, Translate("  t_hdlFile_Worklist_Target_Well: "), t_hdlFile_Worklist_Target_Well, Translate(" t_hdlFile_Worklist_VolumeToAspirate: "), t_hdlFile_Worklist_VolumeToAspirate, Translate("  t_hdlFile_Worklist_VolumePerPool: "), t_hdlFile_Worklist_VolumePerPool);
                    }
                    l_flt_Volume_SampleAspirate = 0.0;
                    l_flt_Volume_Total = 0.0;
                    if (l_bln_UseVolumePerPoolFromWorklist == ASWGLOBAL::BOOL::TRUE)
                    {
                      l_flt_Volume_SampleAspirate = l_arr_flt_VolumePerPool_current.ElementAt( 1 -1) / (l_arr_int_NumberOfSamplesPerPool_current.ElementAt( 1 -1) * 1.0);
                    }
                    else
                    {
                      l_flt_Volume_SampleAspirate = t_hdlFile_Worklist_VolumeToAspirate;
                    }
                    t_hdlFile_Worklist_VolumeToAspirate = l_flt_Volume_SampleAspirate;
                    if (l_bln_ExcludePool == ASWGLOBAL::BOOL::FALSE)
                    {
                      if (l_flt_Volume_SampleAspirate >= l_flt_Volume_MinimumToPipette)
                      {
                        if (l_flt_Volume_SampleAspirate <= t_hdlFile_Worklist_OriginalSampleVolume)
                        {
                        if (l_bln_UseVolumePerPoolFromWorklist == ASWGLOBAL::BOOL::TRUE)
                        {
                        l_flt_VolumePerPool = l_arr_flt_VolumePerPool_current.ElementAt( 1 -1);
                        }
                        else
                        {
                        l_flt_VolumePerPool=l_arr_flt_TotalVolumePerPool.GetAt(l_int_Counter_Pool-1);
                        l_flt_VolumePerPool = l_flt_VolumePerPool + l_flt_Volume_SampleAspirate;
                        }
                        if (l_flt_VolumePerPool <= i_flt_MaximumVolumePerContainer)
                        {
                        l_bln_ExcludeSample = ASWGLOBAL::BOOL::FALSE;
                        {
                        for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfSamplesUsedMultipleTimes;)
                        {
                        loopCounter2 = loopCounter2 + 1;
                        if (t_hdlFile_Worklist_Sample_Position == l_arr_str_MultipleUsedSampleSourcePositions.ElementAt( loopCounter2 -1))
                        {
                        l_flt_TotalVolumePerSample=l_arr_flt_TotalVolumePerSample.GetAt(loopCounter2-1);
                        l_flt_TotalVolumePerSample = l_flt_TotalVolumePerSample + l_flt_Volume_SampleAspirate;
                        if (l_flt_TotalVolumePerSample <= t_hdlFile_Worklist_OriginalSampleVolume)
                        {
                        l_arr_flt_TotalVolumePerSample.SetAt(loopCounter2-1, l_flt_TotalVolumePerSample);
                        }
                        else
                        {
                        t_hdlFile_Worklist_SampleStatus = Translate("Excluded - Sample used multiple times and the original sample volume is not sufficient for all pools");
                        l_bln_ExcludeSample = ASWGLOBAL::BOOL::TRUE;
                        }
                        break;
                        }
                        }
                        }
                        if (l_bln_ExcludeSample == ASWGLOBAL::BOOL::FALSE)
                        {
                        l_arr_flt_TotalVolumePerPool.SetAt(l_int_Counter_Pool-1, l_flt_VolumePerPool);
                        t_hdlFile_Worklist_SampleStatus = Translate("Processed");
                        SeqAdd(o_seq_Asp_Samples, l_str_LabwareID_SamplePlate, t_hdlFile_Worklist_Sample_Position);
                        SeqAdd(o_seq_Disp_Samples, l_str_LabwareID_Pooling, t_hdlFile_Worklist_Target_Well);
                        l_arr_flt_Volumes_Sample.AddAsLast(l_flt_Volume_SampleAspirate);
                        l_bln_PoolProcessed = ASWGLOBAL::BOOL::TRUE;
                        }
                        }
                        else
                        {
                        t_hdlFile_Worklist_SampleStatus = Translate("Excluded - Maximum volume per pool has been exceeded");
                        l_bln_ExcludeSample = ASWGLOBAL::BOOL::TRUE;
                        }
                        }
                        else
                        {
                        t_hdlFile_Worklist_SampleStatus = Translate("Excluded - Not enough volume to aspirate sample");
                        l_bln_ExcludeSample = ASWGLOBAL::BOOL::TRUE;
                        }
                      }
                      else
                      {
                        t_hdlFile_Worklist_SampleStatus = Translate("Excluded - Sample volume to aspirate below minimum allowed");
                        l_bln_ExcludeSample = ASWGLOBAL::BOOL::TRUE;
                      }
                    }
                    else
                    {
                      l_bln_ExcludeSample = ASWGLOBAL::BOOL::TRUE;
                      t_hdlFile_Worklist_SampleStatus = l_str_ExcludePool;
                    }
                    if (l_bln_ExcludeSample == ASWGLOBAL::BOOL::TRUE)
                    {
                      l_int_NumberOfSamples_Excluded = l_int_NumberOfSamples_Excluded + 1;
                      l_int_TotalNumberOfSamples_Excluded = l_int_TotalNumberOfSamples_Excluded + 1;
                      if( 0 == t_hdlFile_Excluded.WriteRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                    }
                    else
                    {
                      if( 0 == t_hdlFile_Output.WriteRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                    }
                  }
                }
                if (l_bln_PoolProcessed == ASWGLOBAL::BOOL::TRUE)
                {
                  o_arr_flt_Volumes_Pools.AddAsLast(l_arr_flt_TotalVolumePerPool.ElementAt( l_int_Counter_Pool -1));
                  o_arr_str_PostionIDsPools.AddAsLast(t_hdlFile_Worklist_Target_Well);
                }
                if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
                {
                  Util2::Debug::TraceArray_3(Translate("Well / Number Of Samples / Total Volume per Pool: "), l_arr_str_Pool_Ids_current, l_arr_int_NumberOfSamplesPerPool_current, l_arr_flt_VolumePerPool_current);
                }
                if( 0 != t_hdlFile_Template.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                t_hdlFile_Template.RemoveFields();
              }
            }
            if (l_int_NumberOfSamples_Excluded > 0)
            {
              l_bln_Repeat_Analysis = ASWGLOBAL::BOOL::TRUE;
              if( 0 != t_hdlFile_Output.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              t_hdlFile_Output.RemoveFields();
              HSLExtensions::File::Delete(t_str_TemplateFilePath);
              HSLExtensions::File::Copy(t_str_OutputFilePath, t_str_TemplateFilePath, ASWGLOBAL::BOOL::TRUE);
              HSLExtensions::File::Delete(t_str_OutputFilePath);
            }
            else
            {
              l_bln_Repeat_Analysis = ASWGLOBAL::BOOL::FALSE;
              if( 0 != t_hdlFile_Output.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              t_hdlFile_Output.RemoveFields();
              if (l_bln_UseVolumePerPoolFromWorklist == ASWGLOBAL::BOOL::FALSE)
              {
                l_int_NumberOfPools=o_arr_str_PostionIDsPools.GetSize();
                {
                  for(loopCounter5 = 0; loopCounter5 < l_int_NumberOfPools;)
                  {
                    loopCounter5 = loopCounter5 + 1;
                    _UpdateRecord(t_str_OutputFilePath, Translate("Sheet1"), Translate("Volume_PerPool"), o_arr_flt_Volumes_Pools.ElementAt( loopCounter5 -1), Translate("Target_Well"), o_arr_str_PostionIDsPools.ElementAt( loopCounter5 -1));
                  }
                }
              }
            }
          }
        }
        if (l_int_NumberOfSamplesUsedMultipleTimes != 0)
        {
          Util2::Debug::TraceArray_3(Translate("l_arr_str_MultipleUsedSampleSourcePositions / l_arr_int_TotalNumberOfUsePerSample / l_arr_flt_TotalVolumePerSample"), l_arr_str_MultipleUsedSampleSourcePositions, l_arr_int_TotalNumberOfUsePerSample, l_arr_flt_TotalVolumePerSample);
        }
        HSLExtensions::File::Delete(t_str_TemplateFilePath);
        l_arr_strTokens.SetSize(0);
        Trace("l_int_TotalNumberOfSamples_Excluded:",l_int_TotalNumberOfSamples_Excluded);
        if (l_int_TotalNumberOfSamples_Excluded > 0)
        {
          _PoolingFileOpen(t_str_OutputFilePath, Translate(""), 3, 2, t_hdlFile_Output);
          _PoolingFileOpen(t_str_ExcludedSamplesFilePath, Translate(""), 1, 2, t_hdlFile_Excluded);
          {
            loopCounter3 = 0;
            while (
               (t_hdlFile_Excluded.Eof() == 0)
            )
            {
              loopCounter3 = loopCounter3 + 1;
              if( 0 == t_hdlFile_Excluded.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 == t_hdlFile_Output.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
          if( 0 != t_hdlFile_Excluded.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          t_hdlFile_Excluded.RemoveFields();
          if( 0 != t_hdlFile_Output.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          t_hdlFile_Output.RemoveFields();
          HSLExtensions::File::Delete(t_str_ExcludedSamplesFilePath);
          if (l_int_TotalNumberOfSamples_Excluded == l_int_NumberOfSamples_Source)
          {
            l_str_Message = StrConcat12(Translate("Number of samples excluded for this run = "), l_int_TotalNumberOfSamples_Excluded, Translate("\n\nALL SAMPLES ARE EXCLUDED. Please review worklist and input parameters "), Translate("\n\nPress RETRY to load a new worklist."), Translate("\nPress CANCEL to abort the run."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            STRTOKENIZE::StrTokenize(l_strFunctionName, Translate("::"), l_arr_strTokens, ASWGLOBAL::BOOL::TRUE);
            l_int_ReturnValue = VectorCustomDialogs::MessageDialog(l_arr_strTokens.ElementAt( 3 -1), 3, 5, 0, 0, 0, l_str_Message);
            if (l_int_ReturnValue == 4)
            {
              _Display_InputWorklist_Dialog(i_str_WorklistFilePath);
            }
            else
            {
              if (l_int_ReturnValue == 2)
              {
                return (ASWGLOBAL::DIALOG::ABORT);
              }
            }
          }
          else
          {
            if (l_int_NumberOfSamplesUsedMultipleTimes != 0)
            {
              if (l_bln_UseVolumePerPoolFromWorklist == ASWGLOBAL::BOOL::TRUE)
              {
                l_str_Message = StrConcat12(Translate("Number of samples excluded for this run = "), l_int_TotalNumberOfSamples_Excluded, Translate("\n\nATTENTION: Remaining samples in pools with excluded samples will be adjusted to the new number of samples per pool. The total volume of the pool will stay the same!"), Translate("\n\nData has been logged into the following file: "), Translate("\n"), t_str_OutputFilePath, Translate("\n\nPlease note that "), l_int_NumberOfSamplesUsedMultipleTimes, Translate(" samples ("), l_str_MultipleUsedSampleSourcePositions, Translate(") are used multiple times."), Translate(""));
              }
              else
              {
                l_str_Message = StrConcat12(Translate("Number of samples excluded for this run = "), l_int_TotalNumberOfSamples_Excluded, Translate("\n\nATTENTION: The volumes of the remaining samples in pools will stay the same. The total volume of the pool will be adjusted!"), Translate("\n\nData has been logged into the following file: "), Translate("\n"), t_str_OutputFilePath, Translate("\n\nPlease note that "), l_int_NumberOfSamplesUsedMultipleTimes, Translate(" samples ("), l_str_MultipleUsedSampleSourcePositions, Translate(") are used multiple times."), Translate(""));
              }
            }
            else
            {
              if (l_bln_UseVolumePerPoolFromWorklist == ASWGLOBAL::BOOL::TRUE)
              {
                l_str_Message = StrConcat12(Translate("Number of samples excluded for this run = "), l_int_TotalNumberOfSamples_Excluded, Translate("\n"), Translate("\n\nATTENTION: Remaining samples in pools with excluded samples will be adjusted to the new number of samples per pool. The total volume of the pool will stay the same!"), Translate("\n\nData has been logged into the following file: "), Translate("\n"), t_str_OutputFilePath, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              }
              else
              {
                l_str_Message = StrConcat12(Translate("Number of samples excluded for this run = "), l_int_TotalNumberOfSamples_Excluded, Translate("\n"), Translate("\n\nATTENTION: The volumes of the remaining samples in pools will stay the same. The total volume of the pool will be adjusted!"), Translate("\n\nData has been logged into the following file: "), Translate("\n"), t_str_OutputFilePath, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              }
            }
            Trace("l_str_Message:",l_str_Message);
            l_str_Message = StrConcat12(l_str_Message, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\n\nPress IGNORE to continue run without excluded samples."), Translate("\nPress RETRY to load a new worklist"), Translate("\nPress ABORT to abort the run"), Translate(""));
            if (i_bln_AllowCostumerIntervention == ASWGLOBAL::BOOL::TRUE)
            {
              STRTOKENIZE::StrTokenize(l_strFunctionName, Translate("::"), l_arr_strTokens, ASWGLOBAL::BOOL::TRUE);
              l_int_ReturnValue = VectorCustomDialogs::MessageDialog(l_arr_strTokens.ElementAt( 3 -1), 3, 7, 0, 0, 0, l_str_Message);
              if (l_int_ReturnValue == 4)
              {
                _Display_InputWorklist_Dialog(i_str_WorklistFilePath);
              }
              else
              {
                if (l_int_ReturnValue == 5)
                {
                  break;
                }
                else
                {
                  return (ASWGLOBAL::DIALOG::ABORT);
                }
              }
            }
            else
            {
              break;
            }
          }
        }
        else
        {
          if (l_int_NumberOfSamplesUsedMultipleTimes != 0)
          {
            l_str_Message = StrConcat12(Translate("Please note that "), l_int_NumberOfSamplesUsedMultipleTimes, Translate(" samples ("), l_str_MultipleUsedSampleSourcePositions, Translate(") are used multiple times"), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\n\nPress IGNORE to continue run with samples used multiple times."), Translate("\nPress RETRY to load a new worklist."), Translate("\nPress ABORT to abort the run."));
            if (i_bln_AllowCostumerIntervention == ASWGLOBAL::BOOL::TRUE)
            {
              STRTOKENIZE::StrTokenize(l_strFunctionName, Translate("::"), l_arr_strTokens, ASWGLOBAL::BOOL::TRUE);
              l_int_ReturnValue = VectorCustomDialogs::MessageDialog(l_arr_strTokens.ElementAt( 3 -1), 3, 7, 0, 0, 0, l_str_Message);
              if (l_int_ReturnValue == 4)
              {
                _Display_InputWorklist_Dialog(i_str_WorklistFilePath);
              }
              else
              {
                if (l_int_ReturnValue == 5)
                {
                  if( 0 != t_hdlFile_Excluded.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  t_hdlFile_Excluded.RemoveFields();
                  HSLExtensions::File::Delete(t_str_ExcludedSamplesFilePath);
                  break;
                }
                else
                {
                  return (ASWGLOBAL::DIALOG::ABORT);
                }
              }
            }
            else
            {
              if( 0 != t_hdlFile_Excluded.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              t_hdlFile_Excluded.RemoveFields();
              HSLExtensions::File::Delete(t_str_ExcludedSamplesFilePath);
              break;
            }
          }
          else
          {
            if( 0 != t_hdlFile_Excluded.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            t_hdlFile_Excluded.RemoveFields();
            HSLExtensions::File::Delete(t_str_ExcludedSamplesFilePath);
            break;
          }
        }
      }
    }
    o_arr_flt_Volumes_Sample=l_arr_flt_Volumes_Sample;
    o_int_NumberOfPools=o_arr_flt_Volumes_Pools.GetSize();
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("t_str_OutputFilePath: "), t_str_OutputFilePath);
    o_seq_Asp_Samples.SetCurrentPosition(1);
    o_seq_Disp_Samples.SetCurrentPosition(1);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seq_Asp_Samples);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seq_Disp_Samples);
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("o_arr_flt_Volumes_Sample: "), o_arr_flt_Volumes_Sample);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("o_int_NumberOfPools: "), o_int_NumberOfPools);
    Util2::Debug::TraceArray_2(Translate("o_arr_str_PostionIDsPools / o_arr_flt_Volumes_Pools: "), o_arr_str_PostionIDsPools, o_arr_flt_Volumes_Pools);
    o_str_FilePath_OutputFile = t_str_OutputFilePath;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _GetPoolInfo( variable i_str_FilePath, variable i_str_SQL, variable i_bln_TraceArrayInfo, file & i_hdlFile, variable i_int_PoolingMode, variable & o_arr_str_Pools[], variable & o_arr_int_NumberOfSamplesPerPool[], variable & o_arr_flt_MassPerSampleInPool[], variable & o_arr_flt_MassPerPool[], variable & o_arr_flt_VolumePerPool[] ) variable {
    private variable l_int_NumberOfSamplesPerPool;
    private variable l_int_NumberOfPools;
    private variable loopCounter2;
    private variable loopCounter4;
    private variable l_arr_str_TargetWells_distinct[];
    private variable l_arr_str_Temp[];
    private variable l_arr_str_TargetWells[];
    private variable l_arr_flt_MassPerSampleInPool[];
    private variable l_arr_str_TargetWells_copy[];
    private variable l_arr_int_NumberOfSamplesPerPool[];
    private variable l_flt_MassPerSample;
    private variable l_flt_MassThisPool;
    private variable l_int_NumberOfDifferentVolumeForThisPool;
    private variable l_flt_VolumeThisPool;
    private variable l_int_NumberOfDifferentMassForThisPool;
    private variable l_arr_flt_MassPerPool[];
    private variable l_arr_flt_TempVolumePerPool[];
    private variable l_arr_flt_VolumePerPool[];
    private variable l_arr_flt_VolumeThisPool[];
    private variable l_arr_flt_MassThisPool[];
    private variable l_arr_flt_TempMassPerPool[];
    private variable l_int_ReturnValue;
    private variable l_flt_VolumeThisSample;
    private variable loopCounter1;
    private variable l_arr_flt_TempVolumePerSample[];
    private variable l_arr_flt_VolumePerSample[];
    private variable l_strFunctionName;
    o_arr_str_Pools.SetSize( 0);
    o_arr_int_NumberOfSamplesPerPool.SetSize( 0);
    o_arr_flt_MassPerSampleInPool.SetSize( 0);
    o_arr_flt_MassPerPool.SetSize( 0);
    o_arr_flt_VolumePerPool.SetSize( 0);
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    l_arr_str_TargetWells.SetSize(0);
    l_arr_int_NumberOfSamplesPerPool.SetSize(0);
    l_arr_flt_VolumePerPool.SetSize(0);
    if (i_int_PoolingMode == 1)
    {
      l_arr_flt_MassPerPool.SetSize(0);
      l_arr_flt_MassPerSampleInPool.SetSize(0);
    }
    if (i_int_PoolingMode == 2)
    {
      l_arr_flt_VolumePerSample.SetSize(0);
    }
    l_int_ReturnValue = 0;
    _PoolingFileOpen(i_str_FilePath, i_str_SQL, 1, i_int_PoolingMode, i_hdlFile);
    {
      loopCounter4 = 0;
      while (
         (i_hdlFile.Eof() == 0)
      )
      {
        loopCounter4 = loopCounter4 + 1;
        if( 0 == i_hdlFile.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_arr_str_TargetWells.AddAsLast(t_hdlFile_Worklist_Target_Well);
        l_arr_flt_VolumePerPool.AddAsLast(t_hdlFile_Worklist_VolumePerPool);
        if (i_int_PoolingMode == 1)
        {
          l_arr_flt_MassPerPool.AddAsLast(t_hdlFile_Worklist_MassPerPool);
        }
        if (i_int_PoolingMode == 2)
        {
          l_arr_flt_VolumePerSample.AddAsLast(t_hdlFile_Worklist_VolumeToAspirate);
        }
      }
    }
    if( 0 != i_hdlFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    i_hdlFile.RemoveFields();
    ARRAYTOOLS::get_distinct_from_array(l_arr_str_TargetWells, l_arr_str_TargetWells_distinct);
    l_int_NumberOfPools=l_arr_str_TargetWells_distinct.GetSize();
    l_arr_str_TargetWells_copy=l_arr_str_TargetWells;
    {
      for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfPools;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_arr_str_Temp.SetSize(0);
        ARRAYTOOLS::ArrayVLookUp(l_arr_str_TargetWells_copy, l_arr_str_TargetWells, l_arr_str_TargetWells_distinct.ElementAt( loopCounter2 -1), l_arr_str_Temp);
        l_int_NumberOfSamplesPerPool=l_arr_str_Temp.GetSize();
        l_arr_int_NumberOfSamplesPerPool.AddAsLast(l_int_NumberOfSamplesPerPool);
        l_arr_flt_TempVolumePerPool.SetSize(0);
        ARRAYTOOLS::ArrayVLookUp(l_arr_flt_VolumePerPool, l_arr_str_TargetWells, l_arr_str_TargetWells_distinct.ElementAt( loopCounter2 -1), l_arr_flt_TempVolumePerPool);
        ARRAYTOOLS::get_distinct_from_array(l_arr_flt_TempVolumePerPool, l_arr_flt_VolumeThisPool);
        l_int_NumberOfDifferentVolumeForThisPool=l_arr_flt_VolumeThisPool.GetSize();
        if (l_int_NumberOfDifferentVolumeForThisPool != 1)
        {
          l_int_ReturnValue = -2;
          l_flt_VolumeThisPool = 0;
        }
        else
        {
          if (i_int_PoolingMode == 1)
          {
            l_flt_VolumeThisPool = l_arr_flt_VolumeThisPool.ElementAt( 1 -1);
          }
          else
          {
            l_flt_VolumeThisPool = l_arr_flt_VolumeThisPool.ElementAt( 1 -1);
            if (l_flt_VolumeThisPool == 0)
            {
              l_arr_flt_TempVolumePerSample.SetSize(0);
              ARRAYTOOLS::ArrayVLookUp(l_arr_flt_VolumePerSample, l_arr_str_TargetWells, l_arr_str_TargetWells_distinct.ElementAt( loopCounter2 -1), l_arr_flt_TempVolumePerSample);
              l_int_NumberOfSamplesPerPool=l_arr_flt_TempVolumePerSample.GetSize();
              {
                for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfSamplesPerPool;)
                {
                  loopCounter1 = loopCounter1 + 1;
                  l_flt_VolumeThisSample=l_arr_flt_TempVolumePerSample.GetAt(loopCounter1-1);
                  l_flt_VolumeThisPool = l_flt_VolumeThisPool + l_flt_VolumeThisSample;
                }
              }
            }
          }
        }
        o_arr_flt_VolumePerPool.AddAsLast(l_flt_VolumeThisPool);
        if (i_int_PoolingMode == 1)
        {
          l_arr_flt_TempMassPerPool.SetSize(0);
          ARRAYTOOLS::ArrayVLookUp(l_arr_flt_MassPerPool, l_arr_str_TargetWells, l_arr_str_TargetWells_distinct.ElementAt( loopCounter2 -1), l_arr_flt_TempMassPerPool);
          ARRAYTOOLS::get_distinct_from_array(l_arr_flt_TempMassPerPool, l_arr_flt_MassThisPool);
          l_int_NumberOfDifferentMassForThisPool=l_arr_flt_MassThisPool.GetSize();
          if (l_int_NumberOfDifferentMassForThisPool != 1)
          {
            l_int_ReturnValue = -1;
            l_flt_MassThisPool = 0;
          }
          else
          {
            l_flt_MassThisPool = l_arr_flt_MassThisPool.ElementAt( 1 -1);
          }
          o_arr_flt_MassPerPool.AddAsLast(l_flt_MassThisPool);
          l_flt_MassPerSample = l_flt_MassThisPool / (l_int_NumberOfSamplesPerPool * 1.0);
          l_arr_flt_MassPerSampleInPool.AddAsLast(l_flt_MassPerSample);
        }
      }
    }
    if (i_bln_TraceArrayInfo == ASWGLOBAL::BOOL::TRUE)
    {
      if (i_int_PoolingMode == 1)
      {
        Util2::Debug::TraceArray_4(Translate("Well / Number of Samples / Mass per Pool / Volume per Pool: "), l_arr_str_TargetWells_distinct, l_arr_int_NumberOfSamplesPerPool, o_arr_flt_MassPerPool, o_arr_flt_VolumePerPool);
        Util2::Debug::TraceArray_4(Translate("Well / Number of Samples / Mass per Pool / Mass per Sample: "), l_arr_str_TargetWells_distinct, l_arr_int_NumberOfSamplesPerPool, o_arr_flt_MassPerPool, l_arr_flt_MassPerSampleInPool);
      }
      else
      {
        Util2::Debug::TraceArray_3(Translate(""), l_arr_str_TargetWells_distinct, l_arr_int_NumberOfSamplesPerPool, o_arr_flt_VolumePerPool);
      }
    }
    o_arr_int_NumberOfSamplesPerPool=l_arr_int_NumberOfSamplesPerPool;
    o_arr_str_Pools=l_arr_str_TargetWells_distinct;
    if (i_int_PoolingMode == 1)
    {
      o_arr_flt_MassPerSampleInPool=l_arr_flt_MassPerSampleInPool;
    }
    else
    {
      o_arr_flt_MassPerPool.SetSize(0);
      o_arr_flt_MassPerSampleInPool.SetSize(0);
    }
    return (l_int_ReturnValue);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  private function _Display_InputWorklist_Dialog( variable & o_str_FileWorklistFullPath ) void {
    private variable i_str_fileFormat;
    private variable l_str_FileFilter;
    private variable g_str_InputWorklistFilePath;
    private variable l_strErrorMessage;
    private variable l_int_rtnErrorDialog;
    private variable l_intReturnDisplayDialog;
    private variable loopCounter2;
    private variable t_strDirectoryName;
    private variable l_strFunctionName;
    o_str_FileWorklistFullPath = 0;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    l_str_FileFilter = Translate("*");
    _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
    l_str_FileFilter = StrConcat4(i_str_fileFormat, Translate(" files allowed|*."), Translate("*"), Translate(""));
    {
      loopCounter2 = 0;
      while (1 == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        l_strErrorMessage = StrConcat4(Translate("Error during previous selection of a worklist "), Translate("Select again a worklist - "), Translate("Trial : "), loopCounter2);
        l_intReturnDisplayDialog = VectorCustomDialogs::FileBrowserDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, Translate("Please select Input File Worklist"), VectorCustomDialogs::FileBrowserDialog::DialogType::Open, l_str_FileFilter, 1, Translate(""), o_str_FileWorklistFullPath);
        _CheckBindReturnValueVectorCustomDialogs(l_intReturnDisplayDialog);
        t_strDirectoryName = HSLExtensions::File::GetDirectoryName(o_str_FileWorklistFullPath);
        Trace("l_intReturnDisplayDialog : ",l_intReturnDisplayDialog);
        if (l_intReturnDisplayDialog == 2)
        {
          VectorCustomDialogs::MessageDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("User pressed abort"));
          abort;
        }
        else
        {
          if (l_intReturnDisplayDialog == -9)
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, l_strErrorMessage);
            _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }
          else
          {
            if (o_str_FileWorklistFullPath == "")
            {
              l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, l_strErrorMessage);
              _CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            }
            else
            {
              g_str_InputWorklistFilePath = o_str_FileWorklistFullPath;
              break;
            }
          }
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  private function _CheckBindReturnValueVectorCustomDialogs( variable i_intBindReturnValue ) void {
    private variable l_blnSkipDialog;
    private variable l_strErrorMessage;
    private variable l_intBindReturnValue;
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    if (i_intBindReturnValue == ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      Trace("Bind return value of current Vector custom dialog : ", i_intBindReturnValue);
      if (i_intBindReturnValue == ASWGLOBAL::BOOL::FALSE)
      {
        l_blnSkipDialog = ASWGLOBAL::BOOL::TRUE;
        l_strErrorMessage = Translate("Command did not end successfully ");
      }
      else
      {
        l_blnSkipDialog = ASWGLOBAL::BOOL::FALSE;
      }
      if (i_intBindReturnValue == -1)
      {
        l_strErrorMessage = Translate("Sizes of initialization arrays are inhomogeneous. Hint : Check your arrays (sizes have to be equal). ");
      }
      if (i_intBindReturnValue == -2)
      {
        l_strErrorMessage = Translate("Data range / type. Hint : Used range or range in combination with data type is invalid.");
      }
      if (i_intBindReturnValue == -5)
      {
        l_strErrorMessage = Translate("IconSet Directory. Hint : Make sure that the directory named “ASWIconSet” exists inside the directory of ASWStandardDialogs library.");
      }
      if (i_intBindReturnValue == -8)
      {
        l_strErrorMessage = Translate("Dialog has been closed through timeout. Hint : This may or may not be an error, depending on the programmer’s intention. Clicking on a dialog interrupts timer and thus does not lead to a error.");
      }
      if (i_intBindReturnValue == -9)
      {
        l_strErrorMessage = Translate("The dialog was not . Hint : Do not use shortcuts to close the dialog, use buttons from the dialog.");
      }
      if (i_intBindReturnValue == -10)
      {
        l_strErrorMessage = Translate("Library is not initialized. Hint : Initialize library before any other function is called.");
      }
      if (i_intBindReturnValue == -11)
      {
        l_strErrorMessage = Translate("Bad Parameter. Hint : See trace for more information about which parameter caused the error. Adjust the input parameter accordingly.");
      }
      if (i_intBindReturnValue == -1000)
      {
        l_strErrorMessage = Translate("A COM error has occured. Hint : Please ensure that the com library HamiltonASWGUI.Dialogs.dll is registered.");
      }
      if (i_intBindReturnValue == -1001)
      {
        l_strErrorMessage = Translate("A COM error has occured. Hint : You cannot execute more dialogs at the same time than defined in the HSL library (default is dialog at a time).");
      }
      Trace("Error message od Vector custom dialog library : ", l_strErrorMessage);
      if (l_blnSkipDialog == ASWGLOBAL::BOOL::FALSE)
      {
        l_intBindReturnValue = VectorCustomDialogs::MessageDialog(Translate("Error message of Vector Custom Dialogs. OK is trying to continue the run ignoring the error - CANCEL will abort the run"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 60, l_strErrorMessage);
        if (l_intBindReturnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  function Pooling_ByMass( variable i_str_WorklistFilePath, sequence i_seq_SourceSamplePlate, sequence i_seq_Pooling, variable i_flt_MaximumVolumePerContainer, variable i_bln_AllowCostumerIntervention, sequence & o_seq_Asp_Samples, sequence & o_seq_Disp_Samples, variable & o_arr_flt_Volumes_Sample[], sequence & o_seq_Disp_Diluent, variable & o_arr_flt_Volumes_Diluent[], variable & o_flt_Diluent_TotalVolume, variable & o_str_FilePath_OutputFile, variable & o_int_NumberOfPools, variable & o_arr_flt_Volumes_Pools[], variable & o_arr_str_PostionIDsPools[], device & ML_STAR ) variable {
    private variable l_int_NumberOfSamples_Source;
    private variable l_bln_ReloadWorklist;
    private variable l_bln_FileExists;
    private variable l_str_CurrentPoolId;
    private variable l_int_ReturnValue;
    private variable l_flt_Volume_SampleAspirate;
    private variable l_flt_CurrentMass;
    private variable l_bln_ExcludePool;
    private variable l_str_Message;
    private variable l_int_NumberOfSamplesUsedMultipleTimes;
    private variable l_strSQL_Sentence1;
    private variable l_str_ExcludePool;
    private variable l_int_NumberOfUseThisSample;
    private variable l_int_CurrentPool_IndexCounter;
    private variable l_str_LabwareID_Pooling;
    private variable l_int_NumberOfPools;
    private variable l_flt_Volume_DiluentAspirate;
    private variable l_flt_MaximumVolumePerPool;
    private variable l_int_NumberOfSamples_Excluded;
    private variable l_flt_TotalVolumePerSample;
    private variable l_flt_TotalVolumeCurrentPool;
    private variable l_int_NumberOfSamples;
    private variable l_bln_ExcludeSample;
    private variable l_bln_Repeat_Analysis;
    private variable l_flt_VolumeDiluent;
    private variable l_str_MultipleUsedSampleSourcePositions;
    private variable l_int_Counter_RepeatAnalysis;
    private variable l_str_Worklist_Extension;
    private variable loopCounter1;
    private variable CounterWorklistReloading;
    private variable loopCounter2;
    private variable l_flt_Volume_Total;
    private variable l_int_TotalNumberOfSamples_Excluded;
    private variable loopCounter3;
    private variable l_flt_VolumePerPool;
    private variable l_flt_Volume_MinimumToPipetteDiluent;
    private variable l_str_Worklist_FileName;
    private variable l_int_NumberOfElements;
    private variable l_flt_Volume_MinimumToPipette;
    private variable l_str_LabwareID_SamplePlate;
    private variable l_int_Counter_Pool;
    private sequence l_seq_Disp_Diluent;
    private variable l_arr_flt_VolumeDiluent_PerPool[];
    private variable l_arr_flt_MassPerPool[];
    private variable l_arr_str_Temp[];
    private variable l_arr_str_SampleSourcePosition[];
    private variable l_arr_str_SampleSourcePosition_distinct[];
    private variable l_arr_flt_VolumePerPool[];
    private variable l_arr_flt_TotalVolumePerSample[];
    private variable l_arr_strTokens[];
    private variable l_arr_int_TotalNumberOfUsePerSample[];
    private variable l_arr_flt_MassPerPool_current[];
    private variable l_arr_int_NumberOfSamplesPerPool_current[];
    private variable l_arr_str_Pool_Ids[];
    private variable l_arr_flt_TotalVolumePerPool[];
    private variable l_arr_flt_MassPerSampleInPool[];
    private variable l_arr_flt_MassPerSampleInPool_current[];
    private variable l_arr_flt_Volumes_Sample[];
    private variable l_arr_flt_MassForThisSample[];
    private variable l_arr_str_Pool_Ids_current[];
    private variable l_arr_flt_VolumePerPool_current[];
    private variable l_arr_int_NumberOfSamplesPerPool[];
    private variable l_arr_str_SampleSourcePosition_copy[];
    private variable l_arr_str_MultipleUsedSampleSourcePositions[];
    private variable l_bln_PoolProcessed;
    private variable l_strFunctionName;
    { sequence __temp; o_seq_Asp_Samples = __temp; }
    { sequence __temp; o_seq_Disp_Samples = __temp; }
    o_arr_flt_Volumes_Sample.SetSize( 0);
    { sequence __temp; o_seq_Disp_Diluent = __temp; }
    o_arr_flt_Volumes_Diluent.SetSize( 0);
    o_flt_Diluent_TotalVolume = 0;
    o_str_FilePath_OutputFile = 0;
    o_int_NumberOfPools = 0;
    o_arr_flt_Volumes_Pools.SetSize( 0);
    o_arr_str_PostionIDsPools.SetSize( 0);
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    {
      CounterWorklistReloading = 0;
      while (1 == 1)
      {
        CounterWorklistReloading = CounterWorklistReloading + 1;
        l_bln_ReloadWorklist = ASWGLOBAL::BOOL::FALSE;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_str_WorklistFilePath: "), i_str_WorklistFilePath);
        l_flt_Volume_MinimumToPipette = 2;
        l_flt_Volume_MinimumToPipetteDiluent = 0.5;
        o_arr_flt_Volumes_Sample.SetSize(0);
        o_arr_flt_Volumes_Diluent.SetSize(0);
        l_str_Worklist_FileName = HSLExtensions::File::GetFileNameWithoutExtension(i_str_WorklistFilePath);
        l_str_Worklist_Extension = HSLExtensions::File::GetFileExtension(i_str_WorklistFilePath);
        t_str_OutputFilePath = StrConcat12(t_strLogFilesDirectory, Translate("\\"), t_strKitTitle, Translate("_"), Translate("PoolingOutput"), Translate("_"), t_str_Date, Translate("_"), t_str_Time, Translate("."), Translate("xls"), Translate(""));
        t_str_TemplateFilePath = StrConcat12(t_strLogFilesDirectory, Translate("\\"), t_strKitTitle, Translate("_"), Translate("PoolingTemplate"), Translate("_"), t_str_Date, Translate("_"), t_str_Time, Translate("."), Translate("xls"), Translate(""));
        t_str_ExcludedSamplesFilePath = StrConcat12(t_strLogFilesDirectory, Translate("\\"), t_strKitTitle, Translate("_"), Translate("PoolingExcludedSamples"), Translate("_"), t_str_Date, Translate("_"), t_str_Time, Translate("."), Translate("xls"), Translate(""));
        o_flt_Diluent_TotalVolume = 0.0;
        l_flt_Volume_SampleAspirate = 0.0;
        l_flt_Volume_DiluentAspirate = 0.0;
        l_flt_Volume_Total = 0.0;
        l_flt_VolumePerPool = 0.0;
        if (l_str_Worklist_Extension == "csv")
        {
          onerror goto errLabel_15 ;
          err.Clear();
          t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
          t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
          t_hdlFile_Worklist.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
          t_hdlFile_Worklist.AddField("Sample_Concentration", t_hdlFile_Worklist_Sample_Concentration, hslFloat);
          t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
          t_hdlFile_Worklist.AddField("Mass_PerPool", t_hdlFile_Worklist_MassPerPool, hslFloat);
          t_hdlFile_Worklist.AddField("Volume_PerPool", t_hdlFile_Worklist_VolumePerPool, hslFloat);
          t_hdlFile_Worklist.SetDelimiter(";");
          if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath, hslRead) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
          }
          errLabel_15 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist. Please review file structure and content, possibly required columns or entries are missing. System will abort"));
            return (ASWGLOBAL::BOOL::FALSE);
          }   /* end if from skip handler if no error */
        }
        if (l_str_Worklist_Extension == "xls")
        {
          onerror goto errLabel_16 ;
          err.Clear();
          t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
          t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
          t_hdlFile_Worklist.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
          t_hdlFile_Worklist.AddField("Sample_Concentration", t_hdlFile_Worklist_Sample_Concentration, hslFloat);
          t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
          t_hdlFile_Worklist.AddField("Mass_PerPool", t_hdlFile_Worklist_MassPerPool, hslFloat);
          t_hdlFile_Worklist.AddField("Volume_PerPool", t_hdlFile_Worklist_VolumePerPool, hslFloat);
          if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath + " " + "Sheet1$", hslRead) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
          }
          errLabel_16 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist. Please review file structure and content, possibly required columns or entries are missing. System will abort"));
            return (ASWGLOBAL::BOOL::FALSE);
          }   /* end if from skip handler if no error */
        }
        if (l_str_Worklist_Extension != "csv")
        {
          if (l_str_Worklist_Extension != "xls")
          {
            _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist (only .xls and .csv file formats are accepted). System will abort"));
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
        _PoolingFileOpen(t_str_TemplateFilePath, Translate(""), 2, 1, t_hdlFile_Template);
        {
          loopCounter3 = 0;
          while (
             (t_hdlFile_Worklist.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == t_hdlFile_Worklist.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            t_hdlFile_Worklist_SampleStatus = Translate("Processed");
            t_hdlFile_Worklist_Mass_per_sample = 0.0;
            t_hdlFile_Worklist_VolumeToAspirate = 0.0;
            if( 0 == t_hdlFile_Template.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            l_int_NumberOfSamples_Source = loopCounter3;
          }
        }
        if( 0 != t_hdlFile_Template.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        t_hdlFile_Template.RemoveFields();
        if( 0 != t_hdlFile_Worklist.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        t_hdlFile_Worklist.RemoveFields();
        _PoolingFileOpen(t_str_OutputFilePath, Translate(""), 2, 1, t_hdlFile_Output);
        if( 0 != t_hdlFile_Output.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        t_hdlFile_Output.RemoveFields();
        _PoolingFileOpen(t_str_ExcludedSamplesFilePath, Translate(""), 2, 1, t_hdlFile_Excluded);
        if( 0 != t_hdlFile_Excluded.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        t_hdlFile_Excluded.RemoveFields();
        l_str_MultipleUsedSampleSourcePositions = Translate("");
        l_arr_str_SampleSourcePosition.SetSize(0);
        l_arr_str_MultipleUsedSampleSourcePositions.SetSize(0);
        if (l_str_Worklist_Extension == "csv")
        {
          onerror goto errLabel_17 ;
          err.Clear();
          t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
          t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
          t_hdlFile_Worklist.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
          t_hdlFile_Worklist.AddField("Sample_Concentration", t_hdlFile_Worklist_Sample_Concentration, hslFloat);
          t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
          t_hdlFile_Worklist.AddField("Mass_PerPool", t_hdlFile_Worklist_MassPerPool, hslFloat);
          t_hdlFile_Worklist.AddField("Volume_PerPool", t_hdlFile_Worklist_VolumePerPool, hslFloat);
          t_hdlFile_Worklist.SetDelimiter(";");
          if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath, hslRead) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
          }
          errLabel_17 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist. Please review file structure and content, possibly required columns or entries are missing. System will abort"));
            return (ASWGLOBAL::BOOL::FALSE);
          }   /* end if from skip handler if no error */
        }
        if (l_str_Worklist_Extension == "xls")
        {
          onerror goto errLabel_18 ;
          err.Clear();
          t_hdlFile_Worklist.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
          t_hdlFile_Worklist.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
          t_hdlFile_Worklist.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
          t_hdlFile_Worklist.AddField("Sample_Concentration", t_hdlFile_Worklist_Sample_Concentration, hslFloat);
          t_hdlFile_Worklist.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
          t_hdlFile_Worklist.AddField("Mass_PerPool", t_hdlFile_Worklist_MassPerPool, hslFloat);
          t_hdlFile_Worklist.AddField("Volume_PerPool", t_hdlFile_Worklist_VolumePerPool, hslFloat);
          if( 0 == t_hdlFile_Worklist.Open(i_str_WorklistFilePath + " " + "Sheet1$", hslRead) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_WorklistFilePath, "HxMetEdCompCmd");
          }
          errLabel_18 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Normalization and Pooling Controller cannot open input worklist. Please review file structure and content, possibly required columns or entries are missing. System will abort"));
            return (ASWGLOBAL::BOOL::FALSE);
          }   /* end if from skip handler if no error */
        }
        {
          loopCounter3 = 0;
          while (
             (t_hdlFile_Worklist.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == t_hdlFile_Worklist.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            l_arr_str_SampleSourcePosition.AddAsLast(t_hdlFile_Worklist_Sample_Position);
          }
        }
        if( 0 != t_hdlFile_Worklist.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        t_hdlFile_Worklist.RemoveFields();
        l_arr_str_SampleSourcePosition_copy=l_arr_str_SampleSourcePosition;
        ARRAYTOOLS::get_distinct_from_array(l_arr_str_SampleSourcePosition, l_arr_str_SampleSourcePosition_distinct);
        l_int_NumberOfSamples=l_arr_str_SampleSourcePosition_distinct.GetSize();
        {
          for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfSamples;)
          {
            loopCounter3 = loopCounter3 + 1;
            ARRAYTOOLS::ArrayVLookUp(l_arr_str_SampleSourcePosition, l_arr_str_SampleSourcePosition_copy, l_arr_str_SampleSourcePosition_distinct.ElementAt( loopCounter3 -1), l_arr_str_Temp);
            l_int_NumberOfUseThisSample=l_arr_str_Temp.GetSize();
            if (l_int_NumberOfUseThisSample > 1)
            {
              l_arr_str_MultipleUsedSampleSourcePositions.AddAsLast(l_arr_str_SampleSourcePosition_distinct.ElementAt( loopCounter3 -1));
              if (l_str_MultipleUsedSampleSourcePositions == "")
              {
                l_str_MultipleUsedSampleSourcePositions = l_arr_str_SampleSourcePosition_distinct.ElementAt( loopCounter3 -1);
              }
              else
              {
                l_str_MultipleUsedSampleSourcePositions = StrConcat4(l_str_MultipleUsedSampleSourcePositions, Translate(", "), l_arr_str_SampleSourcePosition_distinct.ElementAt( loopCounter3 -1), Translate(""));
              }
            }
          }
        }
        l_int_NumberOfSamplesUsedMultipleTimes=l_arr_str_MultipleUsedSampleSourcePositions.GetSize();
        if (l_int_NumberOfSamplesUsedMultipleTimes > 0)
        {
          TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_str_MultipleUsedSampleSourcePositions: "), l_arr_str_MultipleUsedSampleSourcePositions);
        }
        _GetPoolInfo(t_str_TemplateFilePath, Translate(""), t_intTraceLevel, t_hdlFile_Template, 1, l_arr_str_Pool_Ids, l_arr_int_NumberOfSamplesPerPool, l_arr_flt_MassPerSampleInPool, l_arr_flt_MassPerPool, l_arr_flt_VolumePerPool);
        l_int_NumberOfPools=l_arr_str_Pool_Ids.GetSize();
        l_bln_Repeat_Analysis = ASWGLOBAL::BOOL::TRUE;
        _PoolingFileOpen(t_str_ExcludedSamplesFilePath, Translate(""), 3, 1, t_hdlFile_Excluded);
        l_int_TotalNumberOfSamples_Excluded = 0;
        l_bln_ExcludeSample = ASWGLOBAL::BOOL::FALSE;
        {
          l_int_Counter_RepeatAnalysis = 0;
          while (l_bln_Repeat_Analysis == ASWGLOBAL::BOOL::TRUE)
          {
            l_int_Counter_RepeatAnalysis = l_int_Counter_RepeatAnalysis + 1;
            l_bln_FileExists = HSLExtensions::File::Exists(t_str_OutputFilePath);
            if (l_bln_FileExists == ASWGLOBAL::BOOL::FALSE)
            {
              _PoolingFileOpen(t_str_OutputFilePath, Translate(""), 2, 1, t_hdlFile_Output);
              if( 0 != t_hdlFile_Output.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              t_hdlFile_Output.RemoveFields();
            }
            _PoolingFileOpen(t_str_OutputFilePath, Translate(""), 3, 1, t_hdlFile_Output);
            l_arr_flt_TotalVolumePerPool.SetSize(0);
            l_arr_flt_TotalVolumePerSample.SetSize(0);
            l_arr_flt_VolumeDiluent_PerPool.SetSize(0);
            l_arr_flt_TotalVolumePerSample.SetSize(l_int_NumberOfSamplesUsedMultipleTimes);
            l_arr_int_TotalNumberOfUsePerSample.SetSize(0);
            l_arr_int_TotalNumberOfUsePerSample.SetSize(l_int_NumberOfSamplesUsedMultipleTimes);
            o_arr_flt_Volumes_Pools.SetSize(0);
            o_arr_str_PostionIDsPools.SetSize(0);
            l_int_NumberOfSamples_Excluded = 0;
            SeqRemoveAll(o_seq_Asp_Samples);
            SeqRemoveAll(o_seq_Disp_Samples);
            SeqRemoveAll(l_seq_Disp_Diluent);
            l_arr_flt_Volumes_Sample.SetSize(0);
            {
              for(l_int_Counter_Pool = 0; l_int_Counter_Pool < l_int_NumberOfPools;)
              {
                l_int_Counter_Pool = l_int_Counter_Pool + 1;
                l_bln_ExcludePool = ASWGLOBAL::BOOL::FALSE;
                l_bln_PoolProcessed = ASWGLOBAL::BOOL::FALSE;
                l_flt_VolumePerPool = 0.0;
                l_str_CurrentPoolId=l_arr_str_Pool_Ids.GetAt(l_int_Counter_Pool-1);
                if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
                {
                  Trace("*****************************************","");
                  Trace("------> Pool Id = ",l_str_CurrentPoolId);
                  Trace("------> Data analysis number: ", l_int_Counter_RepeatAnalysis);
                  Trace("","");
                }
                l_flt_TotalVolumeCurrentPool=l_arr_flt_VolumePerPool.GetAt(l_int_Counter_Pool-1);
                l_str_LabwareID_Pooling = SeqGetLabwareId(i_seq_Pooling);
                l_str_LabwareID_SamplePlate = SeqGetLabwareId(i_seq_SourceSamplePlate);
                if (l_flt_TotalVolumeCurrentPool == 0)
                {
                  l_flt_MaximumVolumePerPool = i_flt_MaximumVolumePerContainer;
                }
                else
                {
                  l_flt_MaximumVolumePerPool = l_flt_TotalVolumeCurrentPool;
                }
                TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_flt_MaximumVolumePerPool: "), l_flt_MaximumVolumePerPool);
                if (l_flt_TotalVolumeCurrentPool > i_flt_MaximumVolumePerContainer)
                {
                  l_bln_ExcludePool = ASWGLOBAL::BOOL::TRUE;
                  l_str_ExcludePool = Translate("Excluded - Total Volume of Pool exceeds maximum labware capacity");
                }
                l_arr_flt_TotalVolumePerPool.SetSize(l_int_NumberOfPools);
                l_arr_flt_VolumeDiluent_PerPool.SetSize(l_int_NumberOfPools);
                l_strSQL_Sentence1 = StrConcat12("Select * from [Sheet1$] where [Target_Well] = '",l_str_CurrentPoolId,"' and [SampleStatus] = 'Processed'","","","","","","","","","");
                TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_strSQL_Sentence1: "), l_strSQL_Sentence1);
                TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("t_str_TemplateFilePath: "), t_str_TemplateFilePath);
                l_int_ReturnValue = _GetPoolInfo(t_str_TemplateFilePath, l_strSQL_Sentence1, ASWGLOBAL::BOOL::FALSE, t_hdlFile_Template, 1, l_arr_str_Pool_Ids_current, l_arr_int_NumberOfSamplesPerPool_current, l_arr_flt_MassPerSampleInPool_current, l_arr_flt_MassPerPool_current, l_arr_flt_VolumePerPool_current);
                if (l_int_ReturnValue == -1)
                {
                  l_bln_ExcludePool = ASWGLOBAL::BOOL::TRUE;
                  l_str_ExcludePool = Translate("Excluded - Total Mass in Pool not equal.");
                }
                else
                {
                  if (l_int_ReturnValue == -2)
                  {
                    l_bln_ExcludePool = ASWGLOBAL::BOOL::TRUE;
                    l_str_ExcludePool = Translate("Excluded - Total Volume in Pool not equal.");
                  }
                }
                _PoolingFileOpen(t_str_TemplateFilePath, l_strSQL_Sentence1, 1, 1, t_hdlFile_Template);
                {
                  loopCounter1 = 0;
                  while (
                     (t_hdlFile_Template.Eof() == 0)
                  )
                  {
                    loopCounter1 = loopCounter1 + 1;
                    if( 0 == t_hdlFile_Template.ReadRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
                    {
                      TRACELEVEL::Trace_10(t_intTraceLevel, Translate(" t_hdlFile_Worklist_Sample_ID: "), t_hdlFile_Worklist_Sample_ID, Translate("  t_hdlFile_Worklist_Sample_Position: "), t_hdlFile_Worklist_Sample_Position, Translate("  t_hdlFile_Worklist_Sample_Concentration: "), t_hdlFile_Worklist_Sample_Concentration, Translate("  t_hdlFile_Worklist_Target_Well: "), t_hdlFile_Worklist_Target_Well, Translate("  t_hdlFile_Worklist_OriginalSampleVolume: "), t_hdlFile_Worklist_OriginalSampleVolume);
                    }
                    l_flt_Volume_SampleAspirate = 0.0;
                    l_flt_Volume_DiluentAspirate = 0.0;
                    l_flt_Volume_Total = 0.0;
                    ARRAYTOOLS::ArrayVLookUp(l_arr_flt_MassPerSampleInPool_current, l_arr_str_Pool_Ids_current, t_hdlFile_Worklist_Target_Well, l_arr_flt_MassForThisSample);
                    l_flt_CurrentMass=l_arr_flt_MassForThisSample.GetAt(1-1);
                    t_hdlFile_Worklist_Mass_per_sample = l_flt_CurrentMass;
                    l_flt_Volume_SampleAspirate = l_flt_CurrentMass/t_hdlFile_Worklist_Sample_Concentration;
                    l_flt_Volume_SampleAspirate = l_flt_Volume_SampleAspirate * 1000;
                    l_flt_Volume_SampleAspirate = MthFloor(l_flt_Volume_SampleAspirate);
                    l_flt_Volume_SampleAspirate = l_flt_Volume_SampleAspirate / (1000 * 1.0);
                    t_hdlFile_Worklist_VolumeToAspirate = l_flt_Volume_SampleAspirate;
                    if (l_bln_ExcludePool == ASWGLOBAL::BOOL::FALSE)
                    {
                      if (l_flt_Volume_SampleAspirate >= l_flt_Volume_MinimumToPipette)
                      {
                        if (l_flt_Volume_SampleAspirate <= t_hdlFile_Worklist_OriginalSampleVolume)
                        {
                        l_flt_VolumePerPool=l_arr_flt_TotalVolumePerPool.GetAt(l_int_Counter_Pool-1);
                        l_flt_VolumePerPool = l_flt_VolumePerPool + l_flt_Volume_SampleAspirate;
                        if (l_flt_VolumePerPool <= l_flt_MaximumVolumePerPool)
                        {
                        l_bln_ExcludeSample = ASWGLOBAL::BOOL::FALSE;
                        {
                        for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfSamplesUsedMultipleTimes;)
                        {
                        loopCounter2 = loopCounter2 + 1;
                        if (t_hdlFile_Worklist_Sample_Position == l_arr_str_MultipleUsedSampleSourcePositions.ElementAt( loopCounter2 -1))
                        {
                        l_flt_TotalVolumePerSample=l_arr_flt_TotalVolumePerSample.GetAt(loopCounter2-1);
                        l_flt_TotalVolumePerSample = l_flt_TotalVolumePerSample + l_flt_Volume_SampleAspirate;
                        if (l_flt_TotalVolumePerSample <= t_hdlFile_Worklist_OriginalSampleVolume)
                        {
                        l_arr_flt_TotalVolumePerSample.SetAt(loopCounter2-1, l_flt_TotalVolumePerSample);
                        }
                        else
                        {
                        t_hdlFile_Worklist_SampleStatus = Translate("Excluded - Sample used multiple times and the original sample volume is not sufficient for all pools");
                        l_bln_ExcludeSample = ASWGLOBAL::BOOL::TRUE;
                        }
                        break;
                        }
                        }
                        }
                        if (l_bln_ExcludeSample == ASWGLOBAL::BOOL::FALSE)
                        {
                        l_arr_flt_TotalVolumePerPool.SetAt(l_int_Counter_Pool-1, l_flt_VolumePerPool);
                        t_hdlFile_Worklist_SampleStatus = Translate("Processed");
                        SeqAdd(o_seq_Asp_Samples, l_str_LabwareID_SamplePlate, t_hdlFile_Worklist_Sample_Position);
                        SeqAdd(o_seq_Disp_Samples, l_str_LabwareID_Pooling, t_hdlFile_Worklist_Target_Well);
                        l_arr_flt_Volumes_Sample.AddAsLast(l_flt_Volume_SampleAspirate);
                        l_bln_PoolProcessed = ASWGLOBAL::BOOL::TRUE;
                        }
                        }
                        else
                        {
                        t_hdlFile_Worklist_SampleStatus = Translate("Excluded - Maximum volume per pool has been exceeded");
                        l_bln_ExcludeSample = ASWGLOBAL::BOOL::TRUE;
                        }
                        }
                        else
                        {
                        t_hdlFile_Worklist_SampleStatus = Translate("Excluded - Sample concentration too low (Not enough volume to aspirate sample)");
                        l_bln_ExcludeSample = ASWGLOBAL::BOOL::TRUE;
                        }
                      }
                      else
                      {
                        t_hdlFile_Worklist_SampleStatus = Translate("Excluded - Sample concentration too high (Sample volume to aspirate below minimum allowed)");
                        l_bln_ExcludeSample = ASWGLOBAL::BOOL::TRUE;
                      }
                    }
                    else
                    {
                      l_bln_ExcludeSample = ASWGLOBAL::BOOL::TRUE;
                      t_hdlFile_Worklist_SampleStatus = l_str_ExcludePool;
                    }
                    if (l_bln_ExcludeSample == ASWGLOBAL::BOOL::TRUE)
                    {
                      l_int_NumberOfSamples_Excluded = l_int_NumberOfSamples_Excluded + 1;
                      l_int_TotalNumberOfSamples_Excluded = l_int_TotalNumberOfSamples_Excluded + 1;
                      if( 0 == t_hdlFile_Excluded.WriteRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                    }
                    else
                    {
                      if( 0 == t_hdlFile_Output.WriteRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                    }
                  }
                }
                if (l_flt_TotalVolumeCurrentPool > 0)
                {
                  l_flt_VolumeDiluent = l_flt_TotalVolumeCurrentPool - l_flt_VolumePerPool;
                  if (l_flt_VolumeDiluent != l_flt_TotalVolumeCurrentPool)
                  {
                    if (l_flt_VolumeDiluent >= l_flt_Volume_MinimumToPipetteDiluent)
                    {
                      l_arr_flt_VolumeDiluent_PerPool.SetAt(l_int_Counter_Pool-1, l_flt_VolumeDiluent);
                      SeqAdd(l_seq_Disp_Diluent, l_str_LabwareID_Pooling, t_hdlFile_Worklist_Target_Well);
                    }
                  }
                }
                if (l_bln_PoolProcessed == ASWGLOBAL::BOOL::TRUE)
                {
                  if (l_flt_TotalVolumeCurrentPool > 0)
                  {
                    o_arr_flt_Volumes_Pools.AddAsLast(l_flt_TotalVolumeCurrentPool);
                  }
                  else
                  {
                    o_arr_flt_Volumes_Pools.AddAsLast(l_flt_VolumePerPool);
                  }
                  o_arr_str_PostionIDsPools.AddAsLast(t_hdlFile_Worklist_Target_Well);
                }
                if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
                {
                  Util2::Debug::TraceArray_4(Translate("Well / Number Of Samples / Mass per Sample in Pool / Total Volume per Pool: "), l_arr_str_Pool_Ids_current, l_arr_int_NumberOfSamplesPerPool_current, l_arr_flt_MassPerSampleInPool_current, l_arr_flt_TotalVolumePerPool);
                }
                if( 0 != t_hdlFile_Template.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                t_hdlFile_Template.RemoveFields();
              }
            }
            if (l_int_NumberOfSamples_Excluded > 0)
            {
              l_bln_Repeat_Analysis = ASWGLOBAL::BOOL::TRUE;
              if( 0 != t_hdlFile_Output.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              t_hdlFile_Output.RemoveFields();
              HSLExtensions::File::Delete(t_str_TemplateFilePath);
              HSLExtensions::File::Copy(t_str_OutputFilePath, t_str_TemplateFilePath, ASWGLOBAL::BOOL::TRUE);
              HSLExtensions::File::Delete(t_str_OutputFilePath);
            }
            else
            {
              l_bln_Repeat_Analysis = ASWGLOBAL::BOOL::FALSE;
              if( 0 != t_hdlFile_Output.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              t_hdlFile_Output.RemoveFields();
            }
          }
        }
        if (l_int_NumberOfSamplesUsedMultipleTimes != 0)
        {
          Util2::Debug::TraceArray_3(Translate("l_arr_str_MultipleUsedSampleSourcePositions / l_arr_int_TotalNumberOfUsePerSample / l_arr_flt_TotalVolumePerSample"), l_arr_str_MultipleUsedSampleSourcePositions, l_arr_int_TotalNumberOfUsePerSample, l_arr_flt_TotalVolumePerSample);
        }
        HSLExtensions::File::Delete(t_str_TemplateFilePath);
        l_arr_strTokens.SetSize(0);
        Trace("l_int_TotalNumberOfSamples_Excluded:",l_int_TotalNumberOfSamples_Excluded);
        if (l_int_TotalNumberOfSamples_Excluded > 0)
        {
          _PoolingFileOpen(t_str_OutputFilePath, Translate(""), 3, 1, t_hdlFile_Output);
          _PoolingFileOpen(t_str_ExcludedSamplesFilePath, Translate(""), 1, 1, t_hdlFile_Excluded);
          {
            loopCounter3 = 0;
            while (
               (t_hdlFile_Excluded.Eof() == 0)
            )
            {
              loopCounter3 = loopCounter3 + 1;
              if( 0 == t_hdlFile_Excluded.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 == t_hdlFile_Output.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
          if( 0 != t_hdlFile_Excluded.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          t_hdlFile_Excluded.RemoveFields();
          if( 0 != t_hdlFile_Output.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          t_hdlFile_Output.RemoveFields();
          HSLExtensions::File::Delete(t_str_ExcludedSamplesFilePath);
          if (l_int_TotalNumberOfSamples_Excluded == l_int_NumberOfSamples_Source)
          {
            l_str_Message = StrConcat12(Translate("Number of samples excluded for this run = "), l_int_TotalNumberOfSamples_Excluded, Translate("\n\nALL SAMPLES ARE EXCLUDED. Please review worklist and input parameters "), Translate("\n\nPress RETRY to load a new worklist."), Translate("\nPress CANCEL to abort the run."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            STRTOKENIZE::StrTokenize(l_strFunctionName, Translate("::"), l_arr_strTokens, ASWGLOBAL::BOOL::TRUE);
            l_int_ReturnValue = VectorCustomDialogs::MessageDialog(l_arr_strTokens.ElementAt( 3 -1), 3, 5, 0, 0, 0, l_str_Message);
            if (l_int_ReturnValue == 4)
            {
              _Display_InputWorklist_Dialog(i_str_WorklistFilePath);
            }
            else
            {
              if (l_int_ReturnValue == 2)
              {
                return (ASWGLOBAL::DIALOG::ABORT);
              }
            }
          }
          else
          {
            if (l_int_NumberOfSamplesUsedMultipleTimes != 0)
            {
              l_str_Message = StrConcat12(Translate("Number of samples excluded for this run = "), l_int_TotalNumberOfSamples_Excluded, Translate("\n\nATTENTION: Remaining samples in pools with excluded samples will be adjusted to the new number of samples per pool. The total mass of the pool will stay the same!"), Translate("\n\nData has been logged into the following file: "), Translate("\n"), t_str_OutputFilePath, Translate("\n\nPlease note that "), l_int_NumberOfSamplesUsedMultipleTimes, Translate(" samples ("), l_str_MultipleUsedSampleSourcePositions, Translate(") are used multiple times."), Translate(""));
            }
            else
            {
              l_str_Message = StrConcat12(Translate("Number of samples excluded for this run = "), l_int_TotalNumberOfSamples_Excluded, Translate("\n"), Translate("\n\nATTENTION: Remaining samples in pools with excluded samples will be adjusted to the new number of samples per pool. The total mass of the pool will stay the same!"), Translate("\n\nData has been logged into the following file: "), Translate("\n"), t_str_OutputFilePath, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            }
            Trace("l_str_Message:",l_str_Message);
            l_str_Message = StrConcat12(l_str_Message, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\n\nPress IGNORE to continue run without excluded samples."), Translate("\nPress RETRY to load a new worklist"), Translate("\nPress ABORT to abort the run"), Translate(""));
            if (i_bln_AllowCostumerIntervention == ASWGLOBAL::BOOL::TRUE)
            {
              STRTOKENIZE::StrTokenize(l_strFunctionName, Translate("::"), l_arr_strTokens, ASWGLOBAL::BOOL::TRUE);
              l_int_ReturnValue = VectorCustomDialogs::MessageDialog(l_arr_strTokens.ElementAt( 3 -1), 3, 7, 0, 0, 0, l_str_Message);
              if (l_int_ReturnValue == 4)
              {
                _Display_InputWorklist_Dialog(i_str_WorklistFilePath);
              }
              else
              {
                if (l_int_ReturnValue == 5)
                {
                  break;
                }
                else
                {
                  return (ASWGLOBAL::DIALOG::ABORT);
                }
              }
            }
            else
            {
              break;
            }
          }
        }
        else
        {
          if (l_int_NumberOfSamplesUsedMultipleTimes != 0)
          {
            l_str_Message = StrConcat12(Translate("Please note that "), l_int_NumberOfSamplesUsedMultipleTimes, Translate(" samples ("), l_str_MultipleUsedSampleSourcePositions, Translate(") are used multiple times"), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\n\nPress IGNORE to continue run with samples used multiple times."), Translate("\nPress RETRY to load a new worklist."), Translate("\nPress ABORT to abort the run."));
            if (i_bln_AllowCostumerIntervention == ASWGLOBAL::BOOL::TRUE)
            {
              STRTOKENIZE::StrTokenize(l_strFunctionName, Translate("::"), l_arr_strTokens, ASWGLOBAL::BOOL::TRUE);
              l_int_ReturnValue = VectorCustomDialogs::MessageDialog(l_arr_strTokens.ElementAt( 3 -1), 3, 7, 0, 0, 0, l_str_Message);
              if (l_int_ReturnValue == 4)
              {
                _Display_InputWorklist_Dialog(i_str_WorklistFilePath);
              }
              else
              {
                if (l_int_ReturnValue == 5)
                {
                  if( 0 != t_hdlFile_Excluded.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  t_hdlFile_Excluded.RemoveFields();
                  HSLExtensions::File::Delete(t_str_ExcludedSamplesFilePath);
                  break;
                }
                else
                {
                  return (ASWGLOBAL::DIALOG::ABORT);
                }
              }
            }
            else
            {
              if( 0 != t_hdlFile_Excluded.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              t_hdlFile_Excluded.RemoveFields();
              HSLExtensions::File::Delete(t_str_ExcludedSamplesFilePath);
              break;
            }
          }
          else
          {
            if( 0 != t_hdlFile_Excluded.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            t_hdlFile_Excluded.RemoveFields();
            HSLExtensions::File::Delete(t_str_ExcludedSamplesFilePath);
            break;
          }
        }
      }
    }
    l_int_NumberOfElements=l_arr_flt_VolumeDiluent_PerPool.GetSize();
    l_seq_Disp_Diluent.SetCurrentPosition(1);
    {
      for(l_int_CurrentPool_IndexCounter = 0; l_int_CurrentPool_IndexCounter < l_int_NumberOfElements;)
      {
        l_int_CurrentPool_IndexCounter = l_int_CurrentPool_IndexCounter + 1;
        if (l_arr_flt_VolumeDiluent_PerPool.ElementAt( l_int_CurrentPool_IndexCounter -1) != 0)
        {
          o_arr_flt_Volumes_Diluent.AddAsLast(l_arr_flt_VolumeDiluent_PerPool.ElementAt( l_int_CurrentPool_IndexCounter -1));
          o_flt_Diluent_TotalVolume = o_flt_Diluent_TotalVolume + l_arr_flt_VolumeDiluent_PerPool.ElementAt( l_int_CurrentPool_IndexCounter -1);
        }
      }
    }
    SeqCopySequence(o_seq_Disp_Diluent, l_seq_Disp_Diluent);
    o_arr_flt_Volumes_Sample=l_arr_flt_Volumes_Sample;
    o_int_NumberOfPools=o_arr_flt_Volumes_Pools.GetSize();
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("t_str_OutputFilePath: "), t_str_OutputFilePath);
    o_seq_Asp_Samples.SetCurrentPosition(1);
    o_seq_Disp_Samples.SetCurrentPosition(1);
    o_seq_Disp_Diluent.SetCurrentPosition(1);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seq_Asp_Samples);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seq_Disp_Samples);
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("o_arr_flt_Volumes_Sample: "), o_arr_flt_Volumes_Sample);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seq_Disp_Diluent);
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("o_arr_flt_Volumes_Diluent: "), o_arr_flt_Volumes_Diluent);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("o_flt_Diluent_TotalVolume: "), o_flt_Diluent_TotalVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("o_int_NumberOfPools: "), o_int_NumberOfPools);
    Util2::Debug::TraceArray_2(Translate("o_arr_str_PostionIDsPools / o_arr_flt_Volumes_Pools: "), o_arr_str_PostionIDsPools, o_arr_flt_Volumes_Pools);
    o_str_FilePath_OutputFile = t_str_OutputFilePath;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _PoolingFileOpen( variable i_str_FilePath, variable i_str_SQLSentence, variable i_int_Mode, variable i_int_PoolingMode, file & io_hdlFile ) void {
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    if (i_int_Mode == 1)
    {
      if (i_int_PoolingMode == 1)
      {
        io_hdlFile.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
        io_hdlFile.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
        io_hdlFile.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
        io_hdlFile.AddField("Sample_Concentration", t_hdlFile_Worklist_Sample_Concentration, hslFloat);
        io_hdlFile.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
        io_hdlFile.AddField("Mass per sample", t_hdlFile_Worklist_Mass_per_sample, hslFloat);
        io_hdlFile.AddField("Mass_PerPool", t_hdlFile_Worklist_MassPerPool, hslFloat);
        io_hdlFile.AddField("Volume_PerPool", t_hdlFile_Worklist_VolumePerPool, hslFloat);
        io_hdlFile.AddField("VolumeToAspirate", t_hdlFile_Worklist_VolumeToAspirate, hslFloat);
        io_hdlFile.AddField("SampleStatus", t_hdlFile_Worklist_SampleStatus, hslString, 255);
        if( 0 == io_hdlFile.Open(i_str_FilePath + " " + "Sheet1$", hslRead, i_str_SQLSentence) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_FilePath, "HxMetEdCompCmd");
        }
      }
      else
      {
        io_hdlFile.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
        io_hdlFile.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
        io_hdlFile.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
        io_hdlFile.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
        io_hdlFile.AddField("Volume_ToAspirate", t_hdlFile_Worklist_VolumeToAspirate, hslFloat);
        io_hdlFile.AddField("Volume_PerPool", t_hdlFile_Worklist_VolumePerPool, hslFloat);
        io_hdlFile.AddField("SampleStatus", t_hdlFile_Worklist_SampleStatus, hslString, 255);
        if( 0 == io_hdlFile.Open(i_str_FilePath + " " + "Sheet1$", hslRead, i_str_SQLSentence) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_FilePath, "HxMetEdCompCmd");
        }
      }
    }
    if (i_int_Mode == 2)
    {
      if (i_int_PoolingMode == 1)
      {
        io_hdlFile.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
        io_hdlFile.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
        io_hdlFile.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
        io_hdlFile.AddField("Sample_Concentration", t_hdlFile_Worklist_Sample_Concentration, hslFloat);
        io_hdlFile.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
        io_hdlFile.AddField("Mass per sample", t_hdlFile_Worklist_Mass_per_sample, hslFloat);
        io_hdlFile.AddField("Mass_PerPool", t_hdlFile_Worklist_MassPerPool, hslFloat);
        io_hdlFile.AddField("Volume_PerPool", t_hdlFile_Worklist_VolumePerPool, hslFloat);
        io_hdlFile.AddField("VolumeToAspirate", t_hdlFile_Worklist_VolumeToAspirate, hslFloat);
        io_hdlFile.AddField("SampleStatus", t_hdlFile_Worklist_SampleStatus, hslString, 255);
        if( 0 == io_hdlFile.Open(i_str_FilePath + " " + "Sheet1", hslWrite, i_str_SQLSentence) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_FilePath, "HxMetEdCompCmd");
        }
      }
      else
      {
        io_hdlFile.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
        io_hdlFile.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
        io_hdlFile.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
        io_hdlFile.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
        io_hdlFile.AddField("Volume_ToAspirate", t_hdlFile_Worklist_VolumeToAspirate, hslFloat);
        io_hdlFile.AddField("Volume_PerPool", t_hdlFile_Worklist_VolumePerPool, hslFloat);
        io_hdlFile.AddField("SampleStatus", t_hdlFile_Worklist_SampleStatus, hslString, 255);
        if( 0 == io_hdlFile.Open(i_str_FilePath + " " + "Sheet1", hslWrite, i_str_SQLSentence) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_FilePath, "HxMetEdCompCmd");
        }
      }
    }
    if (i_int_Mode == 3)
    {
      if (i_int_PoolingMode == 1)
      {
        io_hdlFile.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
        io_hdlFile.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
        io_hdlFile.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
        io_hdlFile.AddField("Sample_Concentration", t_hdlFile_Worklist_Sample_Concentration, hslFloat);
        io_hdlFile.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
        io_hdlFile.AddField("Mass per sample", t_hdlFile_Worklist_Mass_per_sample, hslFloat);
        io_hdlFile.AddField("Mass_PerPool", t_hdlFile_Worklist_MassPerPool, hslFloat);
        io_hdlFile.AddField("Volume_PerPool", t_hdlFile_Worklist_VolumePerPool, hslFloat);
        io_hdlFile.AddField("VolumeToAspirate", t_hdlFile_Worklist_VolumeToAspirate, hslFloat);
        io_hdlFile.AddField("SampleStatus", t_hdlFile_Worklist_SampleStatus, hslString, 255);
        if( 0 == io_hdlFile.Open(i_str_FilePath + " " + "Sheet1$", hslAppend, i_str_SQLSentence) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_FilePath, "HxMetEdCompCmd");
        }
      }
      else
      {
        io_hdlFile.AddField("Sample_ID", t_hdlFile_Worklist_Sample_ID, hslString, 255);
        io_hdlFile.AddField("Sample_Position", t_hdlFile_Worklist_Sample_Position, hslString, 255);
        io_hdlFile.AddField("Target_Well", t_hdlFile_Worklist_Target_Well, hslString, 255);
        io_hdlFile.AddField("Original_SampleVolume", t_hdlFile_Worklist_OriginalSampleVolume, hslFloat);
        io_hdlFile.AddField("Volume_ToAspirate", t_hdlFile_Worklist_VolumeToAspirate, hslFloat);
        io_hdlFile.AddField("Volume_PerPool", t_hdlFile_Worklist_VolumePerPool, hslFloat);
        io_hdlFile.AddField("SampleStatus", t_hdlFile_Worklist_SampleStatus, hslString, 255);
        if( 0 == io_hdlFile.Open(i_str_FilePath + " " + "Sheet1$", hslAppend, i_str_SQLSentence) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_FilePath, "HxMetEdCompCmd");
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  private function _UpdateRecord( variable i_str_FilePath, variable i_str_SheetName, variable i_str_ColumnName, variable i_keyNewValue, variable i_str_ColumnReference, variable i_keyValueReference ) void {
    private variable l_str_Type_keyNewValue;
    private variable l_bln_errorUpdating;
    private variable l_str_Type_keyValueReference;
    private variable loopCounter1;
    private variable l_str_SQLSentence;
    private timer l_timer_errorUpdating;
    private file file_Update;
    private variable l_strFunctionName;
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    l_bln_errorUpdating = ASWGLOBAL::BOOL::TRUE;
    i_str_SheetName = StrConcat2(i_str_SheetName, Translate("$"));
    {
      loopCounter1 = 0;
      while (l_bln_errorUpdating == ASWGLOBAL::BOOL::TRUE)
      {
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_19 ;
        err.Clear();
        l_str_Type_keyNewValue = StrGetType(i_keyNewValue);
        l_str_Type_keyValueReference = StrGetType(i_keyValueReference);
        if (l_str_Type_keyNewValue == "s")
        {
          if (l_str_Type_keyValueReference == "s")
          {
            l_str_SQLSentence=StrConcat12("UPDATE [",i_str_SheetName,"] SET [",i_str_ColumnName,"] ='",i_keyNewValue,"' WHERE [",i_str_ColumnReference,"] = '",i_keyValueReference,"'","");
            Trace(l_str_SQLSentence);
          }
          else
          {
            l_str_SQLSentence=StrConcat12("UPDATE [",i_str_SheetName,"] SET [",i_str_ColumnName,"] ='",i_keyNewValue,"' WHERE [",i_str_ColumnReference,"] = ",i_keyValueReference,"","");
            Trace(l_str_SQLSentence);
          }
          file_Update.AddField(i_str_ColumnName, i_keyNewValue, hslString, 255);
          if( 0 == file_Update.Open(i_str_FilePath + " " + i_str_SheetName, hslRead, l_str_SQLSentence) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_FilePath, "HxMetEdCompCmd");
          }
        }
        else
        {
          if (l_str_Type_keyValueReference == "s")
          {
            l_str_SQLSentence=StrConcat12("UPDATE [",i_str_SheetName,"] SET [",i_str_ColumnName,"] =",i_keyNewValue," WHERE [",i_str_ColumnReference,"] = '",i_keyValueReference,"'","");
            Trace(l_str_SQLSentence);
          }
          else
          {
            l_str_SQLSentence=StrConcat12("UPDATE [",i_str_SheetName,"] SET [",i_str_ColumnName,"] =",i_keyNewValue," WHERE [",i_str_ColumnReference,"] = ",i_keyValueReference,"","");
            Trace(l_str_SQLSentence);
          }
          if (l_str_Type_keyNewValue == "f")
          {
            file_Update.AddField(i_str_ColumnName, i_keyNewValue, hslFloat);
            if( 0 == file_Update.Open(i_str_FilePath + " " + i_str_SheetName, hslRead, l_str_SQLSentence) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_FilePath, "HxMetEdCompCmd");
            }
          }
          else
          {
            file_Update.AddField(i_str_ColumnName, i_keyNewValue, hslInteger);
            if( 0 == file_Update.Open(i_str_FilePath + " " + i_str_SheetName, hslRead, l_str_SQLSentence) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_FilePath, "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != file_Update.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file_Update.RemoveFields();
        l_bln_errorUpdating = ASWGLOBAL::BOOL::FALSE;
        errLabel_19 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          l_bln_errorUpdating = ASWGLOBAL::BOOL::TRUE;
          if( 0 == l_timer_errorUpdating.SetTimer(2) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == l_timer_errorUpdating.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }   /* end if from skip handler if no error */
        if (loopCounter1 == 2)
        {
          if (l_bln_errorUpdating == ASWGLOBAL::BOOL::TRUE)
          {
            MECC::TraceComment(Translate("Cannot update file"));
          }
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  function FilterSequenceAndArrayForTipType( sequence i_seq_Tips, sequence i_seq_Source, sequence i_seq_Target, variable & i_arr_flt_Volumes[], sequence & o_seq_Aspirate, sequence & o_seq_Dispense, variable & o_arr_flt_Volumes[], device & ML_STAR ) void {
    private variable l_str_PosId_SeqAspirate;
    private variable l_str_LabId_SeqDispense;
    private variable l_bln_AddDataToOutputParameters;
    private variable l_int_NumberOfVolumes;
    private variable l_str_PosId_SeqDispense;
    private variable l_int_TipVolume_Minimum;
    private variable loopCounter1;
    private variable l_int_TipVolume_Maximum;
    private variable l_str_LabId_SeqAspirate;
    private variable l_flt_CurrentVolume;
    private variable l_int_NumberOfPositionsInSequence_Total;
    private variable l_int_TipType;
    private variable l_str_LabwareID;
    private variable l_str_TipType;
    private variable l_strFunctionName;
    { sequence __temp; o_seq_Aspirate = __temp; }
    { sequence __temp; o_seq_Dispense = __temp; }
    o_arr_flt_Volumes.SetSize( 0);
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("******** Tracing INPUT parameters ********"), Translate(""));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seq_Source);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seq_Target);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("i_arr_flt_Volumes: "), i_arr_flt_Volumes);
    l_str_LabwareID = SeqGetLabwareId(i_seq_Tips);
    l_str_TipType = Translate("");
    HSLLabwrAccess::ValueForKeyGetForPropertiesOfLabwareID(ML_STAR, l_str_TipType, Translate("MlStarTipRack"), l_str_LabwareID);
    l_int_TipType = StrIVal(l_str_TipType);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_int_TipType: "), l_int_TipType);
    if (l_int_TipType == 23)
    {
      l_int_TipVolume_Maximum = 50;
      l_int_TipVolume_Minimum = 1;
    }
    if (l_int_TipType == 1)
    {
      l_int_TipVolume_Maximum = 300;
      l_int_TipVolume_Minimum = 50;
    }
    if (l_int_TipType == 5)
    {
      l_int_TipVolume_Maximum = 1000;
      l_int_TipVolume_Minimum = 300;
    }
    o_arr_flt_Volumes.SetSize(0);
    l_int_NumberOfPositionsInSequence_Total = SeqGetTotal(i_seq_Source);
    SeqRemoveAll(o_seq_Aspirate);
    SeqRemoveAll(o_seq_Dispense);
    i_seq_Source.SetCurrentPosition(1);
    i_seq_Target.SetCurrentPosition(1);
    l_int_NumberOfVolumes=i_arr_flt_Volumes.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < l_int_NumberOfVolumes;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_bln_AddDataToOutputParameters = ASWGLOBAL::BOOL::FALSE;
        l_flt_CurrentVolume=i_arr_flt_Volumes.GetAt(loopCounter1-1);
        if (l_flt_CurrentVolume <= l_int_TipVolume_Maximum)
        {
          if (l_int_TipType != 23)
          {
            if (l_flt_CurrentVolume > l_int_TipVolume_Minimum)
            {
              l_bln_AddDataToOutputParameters = ASWGLOBAL::BOOL::TRUE;
            }
          }
          else
          {
            if (l_flt_CurrentVolume >= l_int_TipVolume_Minimum)
            {
              l_bln_AddDataToOutputParameters = ASWGLOBAL::BOOL::TRUE;
            }
          }
        }
        if (l_bln_AddDataToOutputParameters == ASWGLOBAL::BOOL::TRUE)
        {
          o_arr_flt_Volumes.AddAsLast(i_arr_flt_Volumes.ElementAt( loopCounter1 -1));
          if (l_int_NumberOfPositionsInSequence_Total > 0)
          {
            l_str_LabId_SeqAspirate = SeqGetLabwareId(i_seq_Source);
            l_str_PosId_SeqAspirate = SeqGetPositionId(i_seq_Source);
            SeqAdd(o_seq_Aspirate, l_str_LabId_SeqAspirate, l_str_PosId_SeqAspirate);
          }
          l_str_LabId_SeqDispense = SeqGetLabwareId(i_seq_Target);
          l_str_PosId_SeqDispense = SeqGetPositionId(i_seq_Target);
          SeqAdd(o_seq_Dispense, l_str_LabId_SeqDispense, l_str_PosId_SeqDispense);
        }
        if (l_int_NumberOfPositionsInSequence_Total > 0)
        {
          SeqIncrement(i_seq_Source, 1);
        }
        SeqIncrement(i_seq_Target, 1);
      }
    }
    o_seq_Aspirate.SetCurrentPosition(1);
    o_seq_Dispense.SetCurrentPosition(1);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("******** Tracing OUTPUT parameters ********"), Translate(""));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seq_Aspirate);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seq_Dispense);
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("o_arr_flt_Volumes: "), o_arr_flt_Volumes);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
  }

  function Init( device & ML_STAR, variable i_strKitTitle, variable i_blnActivateIntegratedAbortHandler, variable & o_strControllerNameAndVersion ) variable {
    private variable l_intReturnValue;
    private variable l_strFunctionName;
    o_strControllerNameAndVersion = 0;
    t_intTraceLevel = TRACELEVEL::GetTraceLevel();
    t_strControllerVersion = Translate("3.0.0");
    l_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
    l_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    t_strLibraryNameWithoutExtension = HSLExtensions::File::GetFileNameWithoutExtension(t_strLibraryName);
    o_strControllerNameAndVersion = StrConcat4(t_strLibraryNameWithoutExtension, Translate(" "), t_strControllerVersion, Translate(""));
    t_blnActivateIntegratedAbortHandler = i_blnActivateIntegratedAbortHandler;
    onerror goto errLabel_20 ;
    err.Clear();
    l_intReturnValue = VectorCustomDialogs::Initialize();
    _CheckBindReturnValueVectorCustomDialogs(l_intReturnValue);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Return value of init vector custom dialogs : "), l_intReturnValue);
    errLabel_20 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      _DATA_IntegratedAbortHandler(l_strFunctionName, Translate("Vector Custom Dialogs could not be initialized. Method will abort"));
      return (ASWGLOBAL::BOOL::FALSE);
    }   /* end if from skip handler if no error */
    t_strKitTitle = i_strKitTitle;
    t_str_Date = TimGetFormattedDate(Translate("%Y%m%d"));
    t_str_Time = TimGetFormattedTime(Translate("%H%M%S"));
    t_strLogFilesDirectory = Translate("C:\\Program Files (x86)\\HAMILTON\\LogFiles");
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strLibraryName, Translate(""));
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void {
    private variable l_intReturnValue;
    private variable l_intReturnValueDialog;
    private variable l_strAbortMessage;
    private variable t_strLibraryName;
    private variable l_strFunctionName;
    private variable l_arrAbortHandlerMessage[];
    if (t_blnActivateIntegratedAbortHandler == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strFunctionName = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, Translate(""));
    onerror goto errLabel_21 ;
    err.Clear();
    l_intReturnValue = VectorCustomDialogs::Initialize();
    _CheckBindReturnValueVectorCustomDialogs(l_intReturnValue);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Return value of init vector custom dialogs : "), l_intReturnValue);
    errLabel_21 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    l_strFunctionName = StrConcat2(Translate("Affected library : "), i_strFunctionName);
    l_strAbortMessage = StrConcat2(Translate("Abort message : "), i_strAbortMessage);
    l_strFunctionName = StrConcat2(Translate("Affected library : "), i_strFunctionName);
    l_arrAbortHandlerMessage.SetSize(0);
    l_arrAbortHandlerMessage.AddAsLast(l_strFunctionName);
    l_arrAbortHandlerMessage.AddAsLast(l_strAbortMessage);
    l_intReturnValueDialog = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Internal abort handler message :  "), Translate("Error occurred - abort routine started - Press OK to abort the run."), l_arrAbortHandlerMessage);
    _CheckBindReturnValueVectorCustomDialogs(l_intReturnValue);
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, Translate(" <- "));
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, l_strFunctionName, t_strLibraryName, Translate(""));
    abort;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, l_strFunctionName, t_strLibraryName, Translate(""));
  }
} // library namespace
