#pragma once
#include "HSLSeqLib.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLMthLib.hsl"
#include "MLSTARLiquidClassLib\\MLSTARLiquidClassLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLTimLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLExtensions\\Array.hsl"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "HSLErrLib.hsl"
#include "Aliquot\\Aliquot_for_EasySteps v2.hs_"
#include "HSLUtilLib.hsl"
#include "ArrayTools\\ArrayTools.hs_"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLExtensions\\Sequence.hsl"
#include "Tip Management Library\\TipManagementLibrary.hs_"
#include "InstrumentTypeHelper.hsl"
#include "HSLLabwareStateLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLExtensions\\Venus.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "Tip Management Library\\TipToolEnums.hsl"
#include "HSLExtensions\\String.hsl"
#include "Labware Properties\\Labware_Property_Query.hs_"
#include "STAR Tools\\STAR Tip Tools.hs_"
#include "ASWStandardDialogs\\ASWStandardDialogs.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"
#include "HSLSTCCLib.hs_"

namespace PIPETTING_CONTROLLER {
  variable t_blnDeactivatePipettingStepsForTransportTests;
  variable t_blnSimulationModeON;
  variable t_intConsumedTips1000;
  variable t_intConsumedTips300;
  variable t_intConsumedTips50;
  variable t_intMaxSeqTips1000AfterEdit;
  variable t_intMaxSeqTips300AfterEdit;
  variable t_intMaxSeqTips50AfterEdit;
  variable t_intTotalConsumedTips1000;
  variable t_intTotalConsumedTips300;
  variable t_intTotalConsumedTips50;
  variable t_strFullPathReportFile;
  variable t_strTipCounterNameTip1000;
  variable t_strTipCounterNameTip300;
  sequence t_seqTips1000;
  sequence t_seqTips300;
  sequence t_seqTips50;
  variable t_strTipCounterNameTip50;
  variable t_strChannelpattern;
  variable t_intNumberOfAllAvailableChannels;
  sequence t_seqTipSupport;
  variable t_blnLockUnlockSystem;
  global variable g_strFullPathReportFile;
  variable t_intConsumedTips300BeforeRelaodTips;
  variable t_intConsumedTips50BeforeRelaodTips;
  variable t_intConsumedTips1000BeforeRelaodTips;
  variable t_intScheduledNumberOfExtraTip50;
  variable t_intScheduledNumberOfExtraTip1000;
  variable t_intScheduledNumberOfExtraTip300;
  variable t_intScheduledTipsPerSampleTip1000;
  variable t_intScheduledTipsPerSampleTip300;
  variable t_intScheduledTipsPerSampleTip50;
  variable t_arrTipCounterNames[];
  variable t_intPlatformType;
  sequence t_seqWasteChannels;
  variable t_strLibraryName;
  variable t_strFunctionName;
  variable t_activateIntegratedAbortHandler;
  variable t_arr_strLabwareIds_Asp[];
  variable t_arr_fltVolumes[];
  variable t_arrFltVolumeContainerInMicroliterAspiration[];
  variable t_arrFltVolumeContainerInMicroliterDispense[];
  variable t_intTraceLevel;
  variable t_strLibraryNameWithoutExtension;
  variable t_intMPH96TipPickUpSide;
  function Init( device & ML_STAR, variable i_blnDeactivatePipettingStepsForTransportTests, variable i_strFullPathReportFile, sequence i_seqWasteChannels, variable i_intMPH96PickUpSide, variable i_ActivateIntegratedAbortHandler, variable & o_strNameAndVersion ) variable ;
  function PIP_Channels( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_intPrewetCycles ) variable ;
  private function PIP_Channels_ComponentsIntoMasterMixTubes( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable & i_arrFltVolume[], variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense ) variable ;
  function PIP_Channels_DefragmentTipRacks( device & ML_STAR, variable i_strTipCounterName ) variable ;
  function PIP_Channels_DoubleAspiration( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume1stTransfer, variable i_fltVolume2ndTransfer, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom1stTransfer, variable i_fltAspirateHeightFromBottom2ndTransfer, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense ) variable ;
  function PIP_Channels_ExpandedMix( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCyclesAspiration, variable i_intMixCyclesDispense, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_intPrewetCycles ) variable ;
  function PIP_Channels_MixBeadsByOverturn( device & ML_STAR, sequence & io_seqMix, variable i_strLiquidClassName, variable i_intOverturnCycles, variable i_intMixCycles, variable i_fltOverturnVolume, variable i_fltMixVolume, variable i_fltImmersionDepth, variable i_fltMixHeight, variable i_fltAspirationHeight, variable & o_strOutputErrorString ) variable ;
  function PIP_Channels_MixOnly( device & ML_STAR, sequence i_seqAspirationPosition, variable i_fltAspirateHeightFromBottom, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltMixingVolume, variable i_blnPerformMixWithcLLDandFixheight ) variable ;
  function PIP_Channels_Multidispense( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltDispenseHeightFromBottom, variable i_fltVolume, variable i_fltVolumePreAliquot, variable i_fltVolumePostAliquot, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_blnActivateMeasurementOfContainerVolume ) variable ;
  function PIP_Channels_WithVolumeArray( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable & i_arrFltVolume[], variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_intPrewetCycles ) variable ;
  function PIP_Channels_WithVolumeArray_1by1_MultiDispense( device & ML_STAR, sequence & i_arr_seqAspirationPosition[], sequence i_seqDispensePosition, variable & i_arr_fltVolumeAspiration[], variable & i_arr_fltVolumeDispense[], variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_intPrewetCycles, variable & i_arr_blnConsecutiveAspiration[] ) variable ;
  function PIP_Channels_WithVolumeArray_1by1_SingleDispense( device & ML_STAR, sequence & i_arr_seqAspirationPosition[], sequence i_seqDispensePosition, variable & i_arr_fltVolumeAspiration[], variable & i_arr_fltVolumeDispense[], variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_intPrewetCycles, variable & i_arr_blnConsecutiveAspiration[] ) variable ;
  function PIP_Channels_WithVolumeArray_ExpandedMix( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable & i_arrFltVolume[], variable i_strLiquidClassNameTransfer, variable i_intAspirateMixCycles, variable i_intDispenseMixCycles, variable & i_arrFltAspirateMixVolume[], variable & i_arrFltDispenseMixVolume[], variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_intPrewetCycles ) variable ;
  private function PIP_Channels_pLLD( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltDispenseHeightFromBottom, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense ) variable ;
  function PIP_GetDetectedVolumes( variable & o_arrFltVolumesAspirationSequence[], variable & o_arrFltVolumesDispenseSequence[] ) variable ;
  function PIP_MPH( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense ) variable ;
  function PIP_MPH_CleanUpTipSupport( device & ML_STAR, variable i_blnStoreTipsBackToSequence ) variable ;
  function PIP_MPH_DoubleAspiration( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume1stTransfer, variable i_fltVolume2ndTransfer, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom1stTransfer, variable i_fltAspirateHeightFromBottom2ndTransfer, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense ) variable ;
  function PIP_MPH_DoubleAspiration_TipControl( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume1stTransfer, variable i_fltVolume2ndTransfer, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom1stTransfer, variable i_fltAspirateHeightFromBottom2ndTransfer, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_blnPickUpTips, variable i_blnEjectTips ) variable ;
  function PIP_MPH_MixOnly( device & ML_STAR, sequence i_seqMixingPosition, variable i_fltAspirateHeightFromBottom, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltMixingVolume, variable i_blnPerformMixWithcLLDandFixheight, variable i_blnUse96XTipsInsteadOfNumberPerSamplesXTips ) variable ;
  private function PIP_MPH_RelocateTips( device & ML_STAR, sequence i_seqTipPickUpPosition, sequence i_seqTipEjectPosition, variable i_blnCountTipsAtTipPickUpPosition ) variable ;
  function PIP_MPH_StampAdvance( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense ) variable ;
  function PIP_MPH_StampAdvance_ExpandedMix( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCyclesAspiration, variable i_intMixCyclesDispense, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense ) variable ;
  function PIP_MPH_TipControl( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_blnPickUpTips, variable i_blnEjectTips ) variable ;
  function PIP_MPH_TipControl_ExpandedMix( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCyclesAspiration, variable i_intMixCyclesDispense, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_blnPickUpTips, variable i_blnEjectTips ) variable ;
  function PIP_MPH_TipControl_ExpandedMix_AspirateAll( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCyclesAspiration, variable i_intMixCyclesDispense, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_blnPickUpTips, variable i_blnEjectTips ) variable ;
  private function _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReport( variable i_strStepReturnValueAspiration, variable i_strStepReturnValueDispense ) variable ;
  private function _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReportMPH( variable i_strStepReturnValueAspiration, variable i_strStepReturnValueDispense, sequence i_seqAspiration, sequence i_seqDispense, variable i_blnAnalyseAspirationSetpReturnOnly ) variable ;
  private function _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToReport( variable i_strStepReturnValueLoadingStep ) variable ;
  private function _DATA_CalculateAverageVolumeOfVolumeArray( variable & i_arrFltVolume[], variable i_strChannelPattern, variable i_intStartIndexOfPipettingRoutine, variable i_fltAdditionalDeadVolume, variable & o_FltAverageVolume ) void ;
  private function _DATA_ChannelPatternMPH96Columns( variable i_intNumberOfColumns, variable i_intMphPickUpSide, variable & o_strChannelPatternMPH96 ) void ;
  private function _DATA_ChannelPatternMPH96Rows( variable i_intNumberOfRows, variable i_intMphPickUpSide, variable & o_strChannelPatternMPH96 ) void ;
  private function _DATA_CheckChannelPattern( variable i_strChannelPatternTipPickUPAndEject, sequence i_controllingSequence, variable & o_strChannelPatternTransferStep ) variable ;
  private function _DATA_CheckSequenceParameter( sequence & io_seqAspirationPosition, sequence & io_seqDispensePosition ) variable ;
  private function _DATA_CheckSytemConnected( device & ML_STAR ) void ;
  private function _DATA_CheckVolume( variable i_l_fltMixVolume, variable i_l_fltOverturnVolume, variable i_l_intTipType, variable & o_l_strVolumeCheckMsg, variable & o_l_blnSuccess ) void ;
  private function _DATA_ComputeVolumeInLabware( device & ML_STAR, sequence i_seqOfPipettingStep, variable i_strChannelPattern, variable i_strStepReturnValueOfPipettingStep, variable i_blnMPH96used, variable & o_arrFltVolumesDetectedinMicroliter[] ) void ;
  private function _DATA_GetLabwareIDAndSequenceNamesFromDeck( device & io_instrument, variable & o_arrayLabwareNames[], variable & o_arraySeqNames[] ) void ;
  private function _DATA_GetLiquidClassParams( device & ML_STAR, variable & io_l_strLiqClassName, variable i_l_strInputDialogTitle, variable & o_l_fltBlowoutvol, variable & o_l_fltTransAir, variable & o_l_fltAspSpeed, variable & o_l_fltDispSpeed, variable & o_l_fltMixSpeed, variable & o_l_fltAspSwapSpeed, variable & o_l_fltDispSwapSpeed, variable & o_l_fltAspSettleTime, variable & o_l_fltDispSettleTime, variable & o_l_intTipType, variable & o_l_blnSuccessReturn ) void ;
  private function _DATA_GetTipTypeAndDispenseModeOfLiquidClass( variable i_strLiquidClassName, variable & o_intTiptype, variable & o_intDispenseMode ) void ;
  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void ;
  private function _DATA_InterpreteLabwareID( device & ML_STAR, sequence i_seqToBeAnalyzed, variable & o_strTypeOfLabware ) void ;
  private function _DATA_MPH_ProvideSequenceFullColumns( sequence i_seqSequence, sequence & o_seqSequenceTemp ) void ;
  private function _DATA_MPH_ProvideSequenceFullRows( sequence i_seqSequence, sequence & o_seqSequenceTemp ) void ;
  private function _DATA_ManageMultipleTroughs( device & ML_STAR, variable i_fltVolume, variable i_fltPreAliquot, variable i_fltPostAliquot, sequence i_seqAspirationPosition, variable i_strLiquidClassNameTransfer, variable i_strChannelPatternAspirate, variable & o_blnPerformedAdditionalVolumeTransfer, sequence & o_seqAspirationPositionSelectedTrough ) variable ;
  private function _DATA_PlausibilityCheckVolume( variable & io_fltVolumeToBeChecked, variable i_intTipTypeToBeChecked ) variable ;
  private function _DATA_SetRackVisibility( sequence i_sequence, device & ML_STAR ) void ;
  private function _DATA_TranslateChannelErrorCodes( variable i_intChannelPerformedTransportOrPipetteStep, variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedPipettingInformaton ) void ;
  private function _DATA_TranslateIDLErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedIDLInformaton ) void ;
  private function _DATA_TranslateMultiProbeHead96ErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedPipettingInformaton ) void ;
  private function _DATA_TranslateTipManagementErrorCodes( variable i_intErrorCode ) variable ;
  private function _DATA_TranslateVectorCustomDialogsErrorCodes( variable i_intBindReturnValue ) void ;
  private function _DATA_UpdateInformationIntoReportFile( variable i_strInformationToUpdateReportList, variable i_blnUpdateInformationToStatusWindow ) variable ;
  private function _EjectTips( device & ML_STAR, variable i_strChannelPattern ) variable ;
  private function _PickUpTipsChannels( device & ML_STAR, variable i_strTipCounterName, variable & io_strChannelPattern, variable i_blnOptimizationMode, sequence & i_seqTemplate ) variable ;
  private function _PickUpTipsMPH96Columns( device & ML_STAR, variable i_strTipCounterName, variable i_intNumberOfColumns, variable i_intMphPickUpSide ) variable ;
  private function _PickUpTipsMPH96Rows( device & ML_STAR, variable i_strTipCounterName, variable i_intNumberOfRows, variable i_intMphPickUpSide ) variable ;
  private function _Version(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ALIQUOT_FOR_EASYSTEPS_V2::_InitLibrary();
    ARRAYTOOLS::_InitLibrary();
    TIPMANAGEMENTLIBRARY::_InitLibrary();
    LPQ::_InitLibrary();
    STAR_TIP_TOOLS::_InitLibrary();
  }
  function _ExitLibrary() {
    ALIQUOT_FOR_EASYSTEPS_V2::_ExitLibrary();
    ARRAYTOOLS::_ExitLibrary();
    TIPMANAGEMENTLIBRARY::_ExitLibrary();
    LPQ::_ExitLibrary();
    STAR_TIP_TOOLS::_ExitLibrary();
  }

  private function _DATA_InterpreteLabwareID( device & ML_STAR, sequence i_seqToBeAnalyzed, variable & o_strTypeOfLabware ) void {
    private variable l_str_LabID;
    private variable l_bool_ConnectedContainer;
    private variable l_intEndPositionOfReferenceSequence;
    private sequence l_seqDeckReference;
    o_strTypeOfLabware = 0;
    l_str_LabID = SeqGetLabwareId(i_seqToBeAnalyzed);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_str_LabID : "), l_str_LabID);
    l_bool_ConnectedContainer = ASWGLOBAL::BOOL::FALSE;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = ML_STAR.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(l_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      //objRack4.GetRackData(objRackDataParams);
      //l_bool_ConnectedContainer = objRackDataParams.Item1("ConnectedCtr");
      l_bool_ConnectedContainer = objRack4.ConnectedCtr();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    if (l_bool_ConnectedContainer == ASWGLOBAL::BOOL::TRUE)
    {
      o_strTypeOfLabware = Translate("trough");
    }
    else
    {
      DevGetSequence(ML_STAR, l_str_LabID, l_seqDeckReference);
      l_seqDeckReference.SetCurrentPosition(1);
      l_intEndPositionOfReferenceSequence = l_seqDeckReference.GetCount();
      if (l_intEndPositionOfReferenceSequence == 1)
      {
        o_strTypeOfLabware = Translate("tube");
      }
      else
      {
        o_strTypeOfLabware = Translate("plate");
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("o_strTypeOfLabware : "), o_strTypeOfLabware);
  }

  private function _DATA_GetTipTypeAndDispenseModeOfLiquidClass( variable i_strLiquidClassName, variable & o_intTiptype, variable & o_intDispenseMode ) void {
    o_intTiptype = 0;
    o_intDispenseMode = 0;
    MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(i_strLiquidClassName);
    o_intTiptype = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
    o_intDispenseMode = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::DispenseMode);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_strLiquidClassName : "), i_strLiquidClassName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("o_intTiptype : "), o_intTiptype);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("o_intDispenseMode : "), o_intDispenseMode);
  }

  private function _Version(  ) void {
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  VoVPipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: February  14, 2022  (Stephan Grosch)\n\nVersion:  0.2.2\n,\nVersion Notes:\n\n1.introduced a new function \"DATA_SwitchONOFF_SchedulingTips\" to activate or deactivate the scheduling of tips. Deactivation is needed if you would like to pipette in bathces and try to avoid counting the same tip consuption multiple times\n \n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  VoVPipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: November  08, 2022  (Stephan Grosch)\n\nVersion:  0.2.3\n,\nVersion Notes:\n\n\n\nDetails: Stephan Grosch\n\n\n1. removed IDL Tools command or VANTAGELib commands adressing the loading tray to lower or raise\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: March  02, 2022  (Stephan Grosch)\n\nVersion:  0.3\n,\nVersion Notes:\n\n\n\nDetails: Stephan Grosch\n\n\n1. replaced STAR Tip Tools with ATML\n2. introduced _DATA_TranslateVectorCustomDialogsErrorCodes \n3. removed VOV in naming of smt\n4. removed platform type input at init and picture from check if 60ml troughs have sufficient volume\n5. changed bln prewet tips into int prewet cycles to control the numer of prewetting loops\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: May 12, 2023 (Stephan Grosch)\n\nVersion:  0.4\n,\nVersion Notes:\n\n\n\nDetails: Stephan Grosch\n\n\n1. disabled firmware commands to park MPH after usage - assuming that the new Venus software does the job\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: June 15, 2023 (Stephan Grosch)\n\nVersion:  0.5\n,\nVersion Notes:\n\n\n\nDetails: Stephan Grosch\n\n\n1. Pip_Mix for channels deleted code to manipulate sequences...use distinct sequences instead from main method\n2. DATA_ComputeVolimeInLabware integrated\n3. _DATA_ChannelPatternMPH96 integrated\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: June 26, 2023 (Stephan Grosch)\n\nVersion:  0.6\n,\nVersion Notes:\n\n\n\nDetails: Stephan Grosch\n\n\n1.DATA_ManageMultipleTroughs implemented\n2. DATA_ComputeVolumeInLabware modified\n3. DATA_CalculateMeanvalueOfArray implemented\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: July 11, 2023 (Stephan Grosch)\n\nVersion:  0.7\n,\nVersion Notes:\n\n\n\nDetails: Stephan Grosch\n\n\n1.PIP_MPH_ForceEmptyTipSupport implemented to offer a cleaning step after init.\nTHIS STEP IS NOT STORING THE TIPS FROM TIP SUPPORT INTO THE ORIGINAL RESOURCES...IT IS DISCARDING THE UNKONWN TIPS INTO THE WASTE\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: November 08, 2023 (Stephan Grosch)\n\nVersion:  0.8\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1) PIP_Channels_MixOnly and PIP_MPH_MixOnly -> if fixed height >0 --> switch off liquid following as it was causing insufficient liquid errors\n2) PIP_Channels_MixOnly - fixed bug with a variable to use the correct volume in tubes or plates - not devided by number of active channels...\n3) PIP_Channels_MixOnly / tip tracking speed command removed as it was leading to error messages in low volume ranges.\n4) PIP_Channels_Supernatant_PlateToLiquidWaste --> allowed pipetting with tip types 50, 1000 and 300\n5) Removed jet part pipetting within normal pipetting steps - use PIP_Channels_Multidispense instead\n6) Introduced boolean switch to activate liquid following on during aspiration in all pipetting steps - removed hardcoded logic to force liquid following switched off beloww 1.8mm distance to container bottom\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: November 23, 2023 (Stephan Grosch)\n\nVersion:  0.9\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1) _DATA_CalculateAverageVolumeOfVolumeArray : bug fix for index counter string MID function 0 based not 1 based!\n2) _DATA_ManageMultipleTroughs : bug fix l_fltVolumeNeededInAdditionPerChannel calculation was wrong\n\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: November 23, 2023 (Stephan Grosch)\n\nVersion:  0.9.1\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1)  _DATA_ManageMultipleTroughs : modified measurement of trough volume : there is a too high variation in cllD heights : for example same liquid level detected twice leading to a difference of up to 3mm using the same channel!\n    --> possible solution : measuring with all active channels instead of the first one and calculate the mean value\n\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: December 05, 2023 (Stephan Grosch)\n\nVersion:  0.9.2\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1)  Pipetting steps using DATA_ManageMultipleTroughs function and l_blnPerformedAdditionalVolumeTransfer is true : manipulate input aspiration sequence of troughs only.\n2) Deleted DATA_ImportNumberOfSamples tab and integrated it into INIT\n3) Deleted tab to trace start and complete function - inserted lines in tabs to highlight start / end or in error of function\n4) Remove Supernatant pipetting steps for channels and MPH set dispense step to fix height 2mm instead of 15 to avoid spilling\n5) changed logic in function _DATA_InterpreteLabwareID - no hardcoded string find commands anymore.Interpretation if connected container or not introduced.\n6) Deleted library commands : DATA_CheckOutTipConsumption, DATA_SwitchONOFF_SchedulingTips, _DATA_ScheduleTips as it's requested to calculate it by APS in Main method to get more accurate results\n7) Return value introduced to show success within main method\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: January 15, 2024 (Stephan Grosch)\n\nVersion:  0.9.3\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1)  Abstract deleted as it is integrated into the INIT\n2) introduced return values true or false \n3) introduced _DATA_SetRackVisibility function to show racks for pipetting steps if labware was not set to be visible before\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: Februarz 13, 2024 (Stephan Grosch)\n\nVersion:  0.9.4\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1)  Adopted status window text at double transfer steps to show transferred volume against total volume planned \n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: February 16, 2024 (Stephan Grosch)\n\nVersion:  0.9.5\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1) modified manage multiple trough logic that checks and stores the amount of liquid prior to the planned transfer to select the correct trough.\n2) modified init step to search for string TipSupport instead of TipSupport_0001\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: February 16, 2024 (Stephan Grosch)\n\nVersion:  0.9.6\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1) cleaned code and deleted obsolete steps for 384 sequence manipulations\n2) renamed double Transfer steps to double aspiration steps...replaced remove supernatant and consecutive aspiration steps.\n3) optimized manage troughs routine\n4) plausibility checks for multi dispense routine integrated to bypass calc aliquot bug if volume exceeds tip volume\n5) PIP_GetDetectedVolumes introduced\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: February 29, 2024 (Stephan Grosch)\n\nVersion:  0.9.7\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1) Updated pip doubleAspiration logic for MPH and single channels\n2) included tracing logic for debug mode only at manage multiple troughs tab\n3) optimized analayze step return value of MPH steps\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: March 06, 2024 (Stephan Grosch)\n\nVersion:  0.9.8\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1) new tracing of version info\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: March 11, 2024 (Stephan Grosch)\n\nVersion:  0.9.9\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1) PIP_Channels, PIP_Channels_MixOnly, PIP_Channels_WithVolumeArray, PIP_Channels_pLLD : channelpattern used for picking up tips according to control sequence - bug resolved\n2) _DATA_InterpreteLabwareID - new logic interpretes \"tube\" in addition to \"plate\" and \"trough\"\n3) created a new PIP_Channels_MixOnly logic supporting troughs, tubes and plates based on deck reference sequences.\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: March 12, 2024 (Stephan Grosch)\n\nVersion:  0.9.10\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1) Changed tip pick up channel pattern at pipetting steps according to controll sequence - bug detected if tips are kept\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: March 14, 2024 (Stephan Grosch)\n\nVersion:  0.9.11\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1) cleaned library dependencies\n2) new tab DATA_CheckChannelPattern introduced to manipulate channelpattern if tips are not exchanged and last transfer step consumes less then tips then initially picked up\n3) PIP_Channels_Multidispense changed  sequence used for prealiquot and postaliquot from i_seqAspiration to manipulated sequence of preseletred trough according to aspiration step \n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: March 15, 2024 (Stephan Grosch)\n\nVersion:  0.9.12\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1)  adopted tab DATA_CheckChannelPattern  and pipetting steps affected as tip eject failed\n \n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: March 15, 2024 (Stephan Grosch)\n\nVersion:  0.9.13\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1)  adopted double aspiration channel pattern\n \n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: March 16, 2024 (Stephan Grosch)\n\nVersion:  0.9.14\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1)  adopted _DATA_ChannelPatternMPH96Columns. included tip pick up side of MPH96 to fill up channel pattern from left or right\n2) new logic for PIP_MPH_MixOnly introduced\n3) bug fix compute volume for dispense steps using MPH96 for all MPH96 steps\n4) Introduced new tasklocal varialble at INIT to handle t_intMPH96TipPickUpSide from left or right valid for all MPH96 tip pickups columnwise\n5) allowed tip type 1000 filtered tips for MPH steps\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: March 19, 2024 (Stephan Grosch)\n\nVersion:  0.9.15\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1)  adopted logic for _DATA_MPH_ProvideSequenceFullColumns\n2) added new functions to handle rows with MPH\n3) adopted lofig for PIP_MPH steps according to new calculate number of columns\n4) removed i+int NumberOfSamplesFromFile at INIT\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: March 20, 2024 (Stephan Grosch)\n\nVersion:  0.9.16\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1)  adopted logic for _DATA_MPH_ProvideSequenceFullColumns\n2) adopted logic for _DATA_MPH_ProvideSequenceFullRows\n3) adopted controlling sequence at MPH pipetting steps to focus on ASPIRATION as waste Positions might have 96 pos IDs and Aspiration might have less Pos IDs\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: March 25, 2024 (Stephan Grosch)\n\nVersion:  0.9.17\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1)  Debugged Prewet function. Was not always performed. PIP_Channels and PIP_Channels_WithVolumeArray\n2) _DATA_ComputeVolumeInLabware. set indicator 0 instead of -1 at error state into height and volume array\n3) PIP_Channels_MixOnlynew manipulation of sequence to mix integrated + errorhandling modified\n4) Init removed input parameter MPH96 waste sequence\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: April 05, 2024 (Stephan Grosch)\n\nVersion:  0.9.18\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1)  _DATA_ManageMultipleTroughs : corrected typos in traces \n2) PIP_MPH_MixOnly and PIP_Channels_MixOnly : new status message introduced before mixing step is performed to show mix volume\n\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: April 05, 2024 (Stephan Grosch)\n\nVersion:  0.9.19\n,\nVersion Notes:\n\nDetails: Stephan Grosch \n\n1)  PIP_Channels_Multidispense : bug fixed if active measurement switched off. (sequence was not defined by smt). Now the input sequence is copied in that case.\n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: May 14, 2024 (Stephan Grosch)\n\nVersion:  0.9.20\n,\nVersion Notes:\n\nDetails: Stephan Grosch and Alexandra Avci\n\n1)  _DATA_ManageMultipleTroughs : Bugfix sequence handling if refill trough has been forced. \n*************************************************************************************************************************************"));
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nSubmethod Library:  Pipetting_Controller\nWritten By:  Stephan Grosch, Hamilton Germany GmbH, Germany, Martinsried\nDate: May 10, 2025 (Brannon Orr)\n\nVersion:  1.0.0\n,\nVersion Notes:\n\nDetails: Stephan Grosch and Alexandra Avci\n\n1)  Added special pipette functions:\n........PIP_Channels_WithVolumeArray_1by1_MultiDispense and Single Dispense\n........PIP_Channels_MixBeadsByOverturn\n........TipControl and ExpandedMix functions\n2) Found bug in With Volume Array functions....cLLD sensitivity and retract height differences.  Forced to be the same\n*************************************************************************************************************************************"));
  }

  private function _DATA_PlausibilityCheckVolume( variable & io_fltVolumeToBeChecked, variable i_intTipTypeToBeChecked ) variable {
    private variable l_fltVolumeMinimum;
    private variable l_fltVolumeMaximum;
    private variable l_retValueDialog;
    private variable l_strTipType;
    private variable l_strVolume;
    private variable l_strTopText;
    private variable l_strVolumeMinimum;
    private variable l_strVolumeMaximum;
    private variable l_strCheckVolumeMessage;
    private variable l_arrPlausibilityCheckMessage[];
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("io_fltVolumeToBeChecked : "), io_fltVolumeToBeChecked);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_intTipTypeToBeChecked : "), i_intTipTypeToBeChecked);
    if (i_intTipTypeToBeChecked == 1)
    {
      l_fltVolumeMaximum = 300;
      l_fltVolumeMinimum = 5.0;
      l_strTipType = Translate("Standard Volume Filter Tip - SVFT - 300ul");
    }
    if (i_intTipTypeToBeChecked == 5)
    {
      l_fltVolumeMaximum = 1000;
      l_fltVolumeMinimum = 15;
      l_strTipType = Translate("High Volume Filter Tip - HVFT - 1000ul");
    }
    if (i_intTipTypeToBeChecked == 23)
    {
      l_fltVolumeMaximum = 50;
      l_fltVolumeMinimum = 1;
      l_strTipType = Translate("Low Volume Filter Tip - LVFT - 50ul");
    }
    if (io_fltVolumeToBeChecked <= l_fltVolumeMaximum)
    {
      if (io_fltVolumeToBeChecked < l_fltVolumeMinimum)
      {
        MECC::TraceComment(Translate("Volume check failed ....  "));
        l_strCheckVolumeMessage = Translate("Volume check failed. Press OK to proceed with the run. Press CANCEL to Abort the run.");
        l_strTopText = Translate("You may adopt min and max values in _DATA_PlausibilityCheckVolume");
        l_strVolume = StrConcat2(Translate("Volume [µl] : "), io_fltVolumeToBeChecked);
        l_strTipType = StrConcat2(Translate("Current tip type : "), l_strTipType);
        l_strVolumeMinimum = StrConcat2(Translate("Defined minimum volume [µl] : "), l_fltVolumeMinimum);
        l_arrPlausibilityCheckMessage.SetSize(0);
        l_arrPlausibilityCheckMessage.AddAsLast(l_strVolume);
        l_arrPlausibilityCheckMessage.AddAsLast(l_strTipType);
        l_arrPlausibilityCheckMessage.AddAsLast(l_strVolumeMinimum);
        l_arrPlausibilityCheckMessage.AddAsLast(l_strCheckVolumeMessage);
        l_retValueDialog = VectorCustomDialogs::ListDialog(Translate("Plausibility check : Check volume - undershoot minimum  volume of the tiptype"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, l_strTopText, l_strCheckVolumeMessage, l_arrPlausibilityCheckMessage);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_retValueDialog);
        if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
        {
          _DATA_IntegratedAbortHandler(Translate("Pipetting_Controller.smt "), Translate("_DATA_PlausibilityCheckVolume. This smt checks wether a given transfer volume is within the pipetting range of a special tiptype or not."));
          return (ASWGLOBAL::BOOL::FALSE);
        }
        else
        {
          MECC::TraceComment(Translate("Volume check failed - user decided to use a volume that is less then the recommended minimum for the tiptype used.\n"));
        }
      }
      else
      {
      }
    }
    else
    {
      MECC::TraceComment(Translate("Volume check failed ....  "));
      l_strCheckVolumeMessage = Translate("Volume check failed. Press OK to proceed with the run using max. allowed volume for this tip type. Press CANCEL to Abort the run.");
      l_strTopText = Translate("Plausibility check : Check volume - overshoot maximum  volume of the tiptype");
      l_strVolume = StrConcat2(Translate("Volume [µl] : "), io_fltVolumeToBeChecked);
      l_strTipType = StrConcat2(Translate("Current tip type : "), l_strTipType);
      l_strVolumeMaximum = StrConcat2(Translate("Defined maximum volume [µl] : "), l_fltVolumeMaximum);
      l_arrPlausibilityCheckMessage.SetSize(0);
      l_arrPlausibilityCheckMessage.AddAsLast(l_strVolume);
      l_arrPlausibilityCheckMessage.AddAsLast(l_strTipType);
      l_arrPlausibilityCheckMessage.AddAsLast(l_strVolumeMaximum);
      l_arrPlausibilityCheckMessage.AddAsLast(l_strCheckVolumeMessage);
      l_retValueDialog = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, l_strTopText, l_strCheckVolumeMessage, l_arrPlausibilityCheckMessage);
      _DATA_TranslateVectorCustomDialogsErrorCodes(l_retValueDialog);
      if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
      {
        _DATA_IntegratedAbortHandler(Translate("Pipetting_Controller.smt "), Translate("_DATA_PlausibilityCheckVolume. This smt checks wether a given transfer volume is within the pipetting range of a special tiptype or not."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
      else
      {
        io_fltVolumeToBeChecked = l_fltVolumeMaximum;
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReport( variable i_strStepReturnValueAspiration, variable i_strStepReturnValueDispense ) variable {
    private file l_hdlNGSStarReportFile2;
    private variable l_intGetPositionFromNum;
    private variable l_intIndexNumberOfPositions;
    private variable l_intNumberOfPositions;
    private variable l_strCurrentDate;
    private variable l_strCurrentTime;
    private variable l_strCurrentLabIDSource;
    private variable l_strCurrentLabIDTarget;
    private variable l_strCurrentPosIDSource;
    private variable l_strCurrentPosIDTarget;
    private variable l_strGetStepData;
    private variable l_intGetErrorRecovery;
    private variable l_intGetSlaveErrorCode;
    private variable l_intGetMainErrorCode;
    private variable l_strTranslatedPipettingInformationDispense;
    private variable l_strTranslatedPipettingInformationAspiration;
    private variable l_strEmptyString;
    l_strCurrentDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    l_strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    l_strEmptyString = Translate("");
    onerror goto errLabel_1 ;
    err.Clear();
    l_hdlNGSStarReportFile2.AddField("Date", l_strCurrentDate, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Time", l_strCurrentTime, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Source", l_strCurrentLabIDSource, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Source", l_strCurrentPosIDSource, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transfer Volume", l_strGetStepData, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Target", l_strCurrentLabIDTarget, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Target", l_strCurrentPosIDTarget, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Barcode", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transport information", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Aspiration information", l_strTranslatedPipettingInformationAspiration, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Dispense information", l_strTranslatedPipettingInformationDispense, hslString, 255);
    if( 0 == l_hdlNGSStarReportFile2.Open(t_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
    }
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      _DATA_IntegratedAbortHandler(Translate("Pipetting_Controller.smt "), Translate("_DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReport. This smt writes labware ID time stamp and Position ID into a customized report file .xls format. Data based on step return value of channels only."));
      return (ASWGLOBAL::BOOL::FALSE);
    }   /* end if from skip handler if no error */
    l_intNumberOfPositions = StepReturn::GetNumberOfPositions(i_strStepReturnValueAspiration);
    {
      for(l_intIndexNumberOfPositions = 0; l_intIndexNumberOfPositions < l_intNumberOfPositions;)
      {
        l_intIndexNumberOfPositions = l_intIndexNumberOfPositions + 1;
        l_intGetPositionFromNum = StepReturn::GetPositionFromNum(l_intIndexNumberOfPositions, i_strStepReturnValueAspiration);
        l_strCurrentLabIDSource = StepReturn::GetLabwareId(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
        l_strCurrentPosIDSource = StepReturn::GetPositionId(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
        l_strGetStepData = StepReturn::GetStepData(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
        if (l_strGetStepData != "")
        {
          l_intGetMainErrorCode = StepReturn::GetMainError(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
          l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
          l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
          _DATA_TranslateChannelErrorCodes(1, l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedPipettingInformationAspiration);
        }
        l_intGetPositionFromNum = StepReturn::GetPositionFromNum(l_intIndexNumberOfPositions, i_strStepReturnValueDispense);
        l_strCurrentLabIDTarget = StepReturn::GetLabwareId(l_intGetPositionFromNum, i_strStepReturnValueDispense);
        l_strCurrentPosIDTarget = StepReturn::GetPositionId(l_intGetPositionFromNum, i_strStepReturnValueDispense);
        l_strGetStepData = StepReturn::GetStepData(l_intGetPositionFromNum, i_strStepReturnValueDispense);
        if (l_strGetStepData != "")
        {
          l_intGetMainErrorCode = StepReturn::GetMainError(l_intGetPositionFromNum, i_strStepReturnValueDispense);
          l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intGetPositionFromNum, i_strStepReturnValueDispense);
          l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intGetPositionFromNum, i_strStepReturnValueDispense);
          _DATA_TranslateChannelErrorCodes(1, l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedPipettingInformationDispense);
          if( 0 == l_hdlNGSStarReportFile2.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
    }
    if( 0 != l_hdlNGSStarReportFile2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlNGSStarReportFile2.RemoveFields();
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function PIP_MPH_RelocateTips( device & ML_STAR, sequence i_seqTipPickUpPosition, sequence i_seqTipEjectPosition, variable i_blnCountTipsAtTipPickUpPosition ) variable {
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strInformationToBeUpdated;
    private variable l_strComment;
    private variable l_blnSuccess;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(Translate("Transport tips with MPH"), ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqTipPickUpPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqTipEjectPosition);
    l_strInformationToBeUpdated = StrConcat8(Translate("Transport tips with MPH"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Tool used : "), Translate("MPH96"), Translate("."));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    _DATA_SetRackVisibility(i_seqTipPickUpPosition, ML_STAR);
    _DATA_SetRackVisibility(i_seqTipEjectPosition, ML_STAR);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    if (t_intPlatformType == 0)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReportMPH( variable i_strStepReturnValueAspiration, variable i_strStepReturnValueDispense, sequence i_seqAspiration, sequence i_seqDispense, variable i_blnAnalyseAspirationSetpReturnOnly ) variable {
    private file l_hdlNGSStarReportFile2;
    private variable l_CountLineWithinReportFile;
    private variable l_strCurrentDate;
    private variable l_strCurrentTime;
    private variable l_strCurrentLabIDSource;
    private variable l_strCurrentLabIDTarget;
    private variable l_strCurrentPosIDSource;
    private variable l_strCurrentPosIDTarget;
    private variable l_strGetStepData;
    private variable l_intNumberOfPositions;
    private variable l_intGetPositionFromNum;
    private variable l_intIndexNumberOfPositions;
    private variable l_strTranslatedPipettingInformationDispense;
    private variable l_strTranslatedPipettingInformationAspiration;
    private variable l_intGetErrorRecovery;
    private variable l_intGetSlaveErrorCode;
    private variable l_intGetMainErrorCode;
    private variable l_strEmptyString;
    private variable l_intCurrentPositionDispense;
    private variable l_blnForedLoopBreak;
    private variable l_intCurrentPositionAspiration;
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, i_seqAspiration);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, i_seqDispense);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_strStepReturnValueAspiration "), i_strStepReturnValueAspiration);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_strStepReturnValueDispense "), i_strStepReturnValueDispense);
    l_strCurrentDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    l_strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    l_strEmptyString = Translate("");
    l_blnForedLoopBreak = ASWGLOBAL::BOOL::FALSE;
    onerror goto errLabel_2 ;
    err.Clear();
    l_hdlNGSStarReportFile2.AddField("Date", l_strCurrentDate, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Time", l_strCurrentTime, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Source", l_strCurrentLabIDSource, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Source", l_strCurrentPosIDSource, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transfer Volume", l_strGetStepData, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Target", l_strCurrentLabIDTarget, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Target", l_strCurrentPosIDTarget, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Barcode", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transport information", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Aspiration information", l_strTranslatedPipettingInformationAspiration, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Dispense information", l_strTranslatedPipettingInformationDispense, hslString, 255);
    if( 0 == l_hdlNGSStarReportFile2.Open(t_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
    }
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      _DATA_IntegratedAbortHandler(Translate("Pipetting_Controller.smt "), Translate("_DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToNGSStarReportMPH. This smt writes labware ID time stamp and Position ID into a customized report file .xls format. Data based on step return value of MPH only."));
      return (ASWGLOBAL::BOOL::FALSE);
    }   /* end if from skip handler if no error */
    l_intNumberOfPositions = StepReturn::GetNumberOfPositions(i_strStepReturnValueAspiration);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intNumberOfPositions "), l_intNumberOfPositions);
    l_intNumberOfPositions = 96;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intNumberOfPositions manipulated "), l_intNumberOfPositions);
    {
      for(l_CountLineWithinReportFile = 0; l_CountLineWithinReportFile < l_intNumberOfPositions;)
      {
        l_CountLineWithinReportFile = l_CountLineWithinReportFile + 1;
        l_intIndexNumberOfPositions = 1;
        l_strCurrentPosIDSource = SeqGetPositionId(i_seqAspiration);
        SeqIncrement(i_seqAspiration, 1);
        l_intCurrentPositionAspiration = i_seqAspiration.GetCurrentPosition();
        if (l_intCurrentPositionAspiration == 0)
        {
          l_blnForedLoopBreak = ASWGLOBAL::BOOL::TRUE;
        }
        l_intGetPositionFromNum = StepReturn::GetPositionFromNum(l_intIndexNumberOfPositions, i_strStepReturnValueAspiration);
        l_strCurrentLabIDSource = StepReturn::GetLabwareId(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
        if (i_blnAnalyseAspirationSetpReturnOnly == ASWGLOBAL::BOOL::FALSE)
        {
          l_strCurrentPosIDTarget = SeqGetPositionId(i_seqDispense);
          SeqIncrement(i_seqDispense, 1);
          l_intCurrentPositionDispense = i_seqDispense.GetCurrentPosition();
          if (l_intCurrentPositionDispense == 0)
          {
            l_blnForedLoopBreak = ASWGLOBAL::BOOL::TRUE;
          }
          l_strCurrentLabIDTarget = StepReturn::GetLabwareId(l_intGetPositionFromNum, i_strStepReturnValueDispense);
          l_intGetMainErrorCode = StepReturn::GetMainError(l_intGetPositionFromNum, i_strStepReturnValueDispense);
          l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intGetPositionFromNum, i_strStepReturnValueDispense);
          l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intGetPositionFromNum, i_strStepReturnValueDispense);
          _DATA_TranslateChannelErrorCodes(1, l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedPipettingInformationDispense);
        }
        else
        {
          l_strCurrentLabIDTarget = Translate("discarded to waste MPH 96");
          l_strCurrentPosIDTarget = l_strCurrentPosIDSource;
        }
        l_strGetStepData = StepReturn::GetStepData(l_intGetPositionFromNum, i_strStepReturnValueDispense);
        l_intGetMainErrorCode = StepReturn::GetMainError(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
        l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
        l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intGetPositionFromNum, i_strStepReturnValueAspiration);
        _DATA_TranslateChannelErrorCodes(1, l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedPipettingInformationAspiration);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strGetStepData "), l_strGetStepData);
        if (l_strGetStepData != "")
        {
          if( 0 == l_hdlNGSStarReportFile2.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        if (l_blnForedLoopBreak == ASWGLOBAL::BOOL::TRUE)
        {
          break;
        }
      }
    }
    if( 0 != l_hdlNGSStarReportFile2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlNGSStarReportFile2.RemoveFields();
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_Channels_WithVolumeArray( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable & i_arrFltVolume[], variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_intPrewetCycles ) variable {
    private variable l_fltVolumeOfCurrentArrayIndex;
    private variable l_intMainLoopTransferLiquids;
    private variable l_intArrayIndexCounter;
    private variable l_intArrFltVolumeIndex;
    private variable l_intCurrentDispenseMode;
    private variable l_intCurrentTipType;
    private variable l_intNumberOfSamples;
    private variable l_intSizeArrFltVolume;
    private variable l_strCurrentDispenseMode;
    private variable l_strStepReturnValueDispense;
    private variable l_strStepReturnValueAspiration;
    private variable l_strTypeOfLabware;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strChannelPattern;
    private variable l_intMixCycleAspiration;
    private variable l_intMixCycleDispense;
    private variable l_strTipCounterNameIntermediate;
    private sequence l_seqTipsIntermediate;
    private variable l_arrFltVolumeContainerInMicroliter[];
    private variable l_fltMeanvalueTransferVolume;
    private variable l_blnPerformedAdditionalVolumeTransfer;
    private variable l_strComment;
    private variable l_blnSuccess;
    private sequence l_seqAspirationPositionPreselectedTrough;
    private variable l_strChannelPatternTransfer;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering independent volumes per channel"), Translate(""), Translate(""));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnSuccess = _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    _DATA_SetRackVisibility(i_seqAspirationPosition, ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_intSizeArrFltVolume=i_arrFltVolume.GetSize();
      {
        for(l_intArrFltVolumeIndex = 0; l_intArrFltVolumeIndex < l_intSizeArrFltVolume;)
        {
          l_intArrFltVolumeIndex = l_intArrFltVolumeIndex + 1;
          l_fltVolumeOfCurrentArrayIndex=i_arrFltVolume.GetAt(l_intArrFltVolumeIndex-1);
          l_blnSuccess = _DATA_PlausibilityCheckVolume(l_fltVolumeOfCurrentArrayIndex, l_intCurrentTipType);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
      }
      _DATA_InterpreteLabwareID(ML_STAR, i_seqAspirationPosition, l_strTypeOfLabware);
      l_intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        if (l_strTypeOfLabware == "trough")
        {
        }
        MECC::TraceComment(Translate("********** Now pipetting reagents to destination plate"));
        l_intArrayIndexCounter = 1;
        if (l_intCurrentTipType == 1)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
        }
        if (l_intCurrentTipType == 5)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
        }
        if (l_intCurrentTipType == 23)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
        }
        {
          l_intMainLoopTransferLiquids = 0;
          while (
             (i_seqDispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seqDispensePosition, 1, i_seqAspirationPosition, 1);
            l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
            if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              l_strChannelPattern = Translate("");
              l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPattern, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, i_seqDispensePosition);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
            }
            else
            {
              if (l_intMainLoopTransferLiquids == 1)
              {
                l_strChannelPattern = Translate("");
                l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPattern, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, i_seqDispensePosition);
                if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
                {
                  return (ASWGLOBAL::BOOL::FALSE);
                }
              }
            }
            _DATA_CheckChannelPattern(l_strChannelPattern, i_seqDispensePosition, l_strChannelPatternTransfer);
            l_intMixCycleDispense = i_intMixCycles;
            if (i_intPrewetCycles > 0)
            {
              if (l_intMainLoopTransferLiquids == 1)
              {
                l_intMixCycleAspiration = i_intPrewetCycles;
              }
            }
            if (l_intMainLoopTransferLiquids > 1)
            {
              l_intMixCycleAspiration = i_intMixCycles;
            }
            if (i_fltAspirateHeightFromBottom == 0)
            {
              _DATA_CalculateAverageVolumeOfVolumeArray(i_arrFltVolume, l_strChannelPatternTransfer, l_intArrayIndexCounter, 0, l_fltMeanvalueTransferVolume);
              l_blnSuccess = _DATA_ManageMultipleTroughs(ML_STAR, l_fltMeanvalueTransferVolume, 0, 0, i_seqAspirationPosition, i_strLiquidClassNameTransfer, l_strChannelPatternTransfer, l_blnPerformedAdditionalVolumeTransfer, l_seqAspirationPositionPreselectedTrough);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
              if (l_blnPerformedAdditionalVolumeTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              _DATA_ComputeVolumeInLabware(ML_STAR, l_seqAspirationPositionPreselectedTrough, l_strChannelPatternTransfer, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
              t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterAspiration, l_arrFltVolumeContainerInMicroliter);
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
            }
            if (i_fltDispenseHeightFromBottom == 0)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_ComputeVolumeInLabware(ML_STAR, i_seqDispensePosition, l_strChannelPatternTransfer, l_strStepReturnValueDispense, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
              t_arrFltVolumeContainerInMicroliterDispense = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterDispense, l_arrFltVolumeContainerInMicroliter);
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
            }
            l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              if (l_intCurrentTipType == 1)
              {
                t_seqTips300 = HSLExtensions::Sequence::Copy(l_seqTipsIntermediate, 3);
              }
              if (l_intCurrentTipType == 5)
              {
                t_seqTips1000 = HSLExtensions::Sequence::Copy(l_seqTipsIntermediate, 3);
              }
              if (l_intCurrentTipType == 23)
              {
                t_seqTips50 = HSLExtensions::Sequence::Copy(l_seqTipsIntermediate, 3);
              }
              l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPattern);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
            }
            l_intArrayIndexCounter = l_intArrayIndexCounter + t_intNumberOfAllAvailableChannels;
            if (i_blnIncrementAspirationSequence == ASWGLOBAL::BOOL::TRUE)
            {
              SeqIncrement(i_seqAspirationPosition, t_intNumberOfAllAvailableChannels);
            }
            SeqIncrement(i_seqDispensePosition, t_intNumberOfAllAvailableChannels);
            if (
               (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
          i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
          i_seqDispensePosition.SetCurrentPosition(1);
          i_seqAspirationPosition.SetCurrentPosition(1);
        }
        if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
        {
          l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPattern);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
      }
      if (l_strCurrentDispenseMode == "Part")
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Dispense Mode"));
        _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported dispense mode detected."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_MPH( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense ) variable {
    private variable l_intCurrentDispenseMode;
    private variable l_strCurrentDispenseMode;
    private variable l_intCurrentTipType;
    private variable l_strStepReturnValueDispense;
    private variable l_strStepReturnValueAspiration;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strVolume;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    private variable l_intTotalColumns;
    private sequence l_seqTempAspirationPosition;
    private sequence l_seqTempDispensePosition;
    private variable l_intMixCycleAspiration;
    private variable l_intMixCycleDispense;
    private variable l_strTipCounterNameIntermediate;
    private variable l_strChannelPattern;
    private variable l_arrFltVolumeContainerInMicroliter[];
    private variable l_strComment;
    private variable l_blnSuccess;
    private variable l_intNumberOfSamplesAdjustedToFullColumns;
    private variable l_intTotalRows;
    private variable l_intNumberOfSamplesAdjustedToFullRows;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strVolume = StrFStr(i_fltVolume);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents using MPH"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnSuccess = _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
    _DATA_SetRackVisibility(i_seqAspirationPosition, ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_blnSuccess = _DATA_PlausibilityCheckVolume(i_fltVolume, l_intCurrentTipType);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        if (t_intMPH96TipPickUpSide <= 1)
        {
          MECC::TraceComment(Translate("tip pick up side is defined to pick up columns"));
          _DATA_MPH_ProvideSequenceFullColumns(i_seqAspirationPosition, l_seqTempAspirationPosition);
          _DATA_MPH_ProvideSequenceFullColumns(i_seqDispensePosition, l_seqTempDispensePosition);
          l_intNumberOfSamplesAdjustedToFullColumns = l_seqTempAspirationPosition.GetCount();
          l_intTotalColumns = l_intNumberOfSamplesAdjustedToFullColumns / 8;
          _DATA_ChannelPatternMPH96Columns(l_intTotalColumns, t_intMPH96TipPickUpSide, l_strChannelPattern);
        }
        else
        {
          MECC::TraceComment(Translate("tip pick up side is defined to pick up rows"));
          _DATA_MPH_ProvideSequenceFullRows(i_seqAspirationPosition, l_seqTempAspirationPosition);
          _DATA_MPH_ProvideSequenceFullRows(i_seqDispensePosition, l_seqTempDispensePosition);
          l_intNumberOfSamplesAdjustedToFullRows = l_seqTempAspirationPosition.GetCount();
          l_intTotalRows = l_intNumberOfSamplesAdjustedToFullRows / 12;
          _DATA_ChannelPatternMPH96Rows(l_intTotalRows, t_intMPH96TipPickUpSide, l_strChannelPattern);
        }
        if (i_fltVolumeMixDispense == 0)
        {
          l_intMixCycleDispense = 0;
        }
        else
        {
          l_intMixCycleDispense = i_intMixCycles;
        }
        if (i_fltVolumeMixAspiration == 0)
        {
          l_intMixCycleAspiration = 0;
        }
        else
        {
          l_intMixCycleAspiration = i_intMixCycles;
        }
        if (l_intCurrentTipType == 5)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
        }
        if (l_intCurrentTipType == 1)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
        }
        if (l_intCurrentTipType == 23)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
        }
        if (t_intMPH96TipPickUpSide <= 1)
        {
          l_blnSuccess = _PickUpTipsMPH96Columns(ML_STAR, l_strTipCounterNameIntermediate, l_intTotalColumns, t_intMPH96TipPickUpSide);
        }
        else
        {
          l_blnSuccess = _PickUpTipsMPH96Rows(ML_STAR, l_strTipCounterNameIntermediate, l_intTotalRows, t_intMPH96TipPickUpSide);
        }
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
        if (i_fltAspirateHeightFromBottom == 0)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            	l_strStepReturnValueAspiration = arrRetValues[2];
          }
          _DATA_ComputeVolumeInLabware(ML_STAR, l_seqTempAspirationPosition, l_strChannelPattern, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::TRUE, l_arrFltVolumeContainerInMicroliter);
          t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Copy(l_arrFltVolumeContainerInMicroliter);
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            	l_strStepReturnValueAspiration = arrRetValues[2];
          }
        }
        if (i_fltDispenseHeightFromBottom == 0)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strStepReturnValueDispense = arrRetValues[2];
          }
          _DATA_ComputeVolumeInLabware(ML_STAR, l_seqTempDispensePosition, l_strChannelPattern, l_strStepReturnValueDispense, ASWGLOBAL::BOOL::TRUE, l_arrFltVolumeContainerInMicroliter);
          t_arrFltVolumeContainerInMicroliterDispense = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterDispense, l_arrFltVolumeContainerInMicroliter);
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strStepReturnValueDispense = arrRetValues[2];
          }
        }
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReportMPH(l_strStepReturnValueAspiration, l_strStepReturnValueDispense, l_seqTempAspirationPosition, l_seqTempDispensePosition, ASWGLOBAL::BOOL::FALSE);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Dispense Mode"));
        _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported dispense mode detected."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    if (t_intPlatformType == 0)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_UpdateInformationIntoReportFile( variable i_strInformationToUpdateReportList, variable i_blnUpdateInformationToStatusWindow ) variable {
    private variable l_strEmptyString;
    private file l_hdlNGSStarReportFile2;
    private variable l_intDialogReturnValue;
    private variable l_intFoundString;
    private variable l_intLengthOfString;
    private variable l_strCurrentTime;
    l_strEmptyString = Translate("");
    l_strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    onerror goto errLabel_3 ;
    err.Clear();
    l_hdlNGSStarReportFile2.AddField("Date", i_strInformationToUpdateReportList, hslString, 500);
    l_hdlNGSStarReportFile2.AddField("Time", l_strCurrentTime, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Source", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Source", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transfer Volume", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Target", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Target", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Barcode", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transport information", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Aspiration information", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Dispense information", l_strEmptyString, hslString, 255);
    if( 0 == l_hdlNGSStarReportFile2.Open(t_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
    }
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      _DATA_IntegratedAbortHandler(Translate("VoVPlatform_Controller.smt "), Translate("DATA_UpdateInformationIntoReportFile. This smt writes any information (string) into a customized report file .xls format within a new line inbetween the stepreturn values."));
      return (ASWGLOBAL::BOOL::FALSE);
    }   /* end if from skip handler if no error */
    if( 0 == l_hdlNGSStarReportFile2.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != l_hdlNGSStarReportFile2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlNGSStarReportFile2.RemoveFields();
    if (i_blnUpdateInformationToStatusWindow == ASWGLOBAL::BOOL::TRUE)
    {
      onerror goto errLabel_4 ;
      err.Clear();
      l_intDialogReturnValue = VectorCustomDialogs::AppendStatusText(i_strInformationToUpdateReportList);
      _DATA_TranslateVectorCustomDialogsErrorCodes(l_intDialogReturnValue);
      errLabel_4 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        l_intDialogReturnValue = VectorCustomDialogs::Initialize();
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intDialogReturnValue);
        l_intDialogReturnValue = VectorCustomDialogs::ShowStatusDialog(Translate("VoVPipetting_Controller"));
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intDialogReturnValue);
        l_intDialogReturnValue = VectorCustomDialogs::AppendStatusText(i_strInformationToUpdateReportList);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intDialogReturnValue);
      }   /* end if from skip handler if no error */
    }
    l_intFoundString = StrFind(i_strInformationToUpdateReportList, Translate("trough"));
    if (l_intFoundString >= 0)
    {
      l_intLengthOfString = StrGetLength(i_strInformationToUpdateReportList);
      if (l_intLengthOfString >= 255)
      {
        VectorCustomDialogs::MessageDialog(Translate("Excel handling"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 10, Translate("The lenght of string to be updated or written into a column exceeds the maximum supported number of letters per column (255). No content will be written."));
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_IntegratedAbortHandler( variable i_strFunctionName, variable i_strAbortMessage ) void {
    private variable l_strAbortMessage;
    private variable l_arrAbortHandlerMessage[];
    private variable l_intReturnvalueDialog;
    private variable l_strComment;
    private variable l_strFunctionName;
    if (t_activateIntegratedAbortHandler == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    l_strFunctionName = Translate("");
    l_strComment = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, l_strComment);
    l_strFunctionName = Translate("");
    l_strComment = Translate("");
    l_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_strFunctionName, t_strLibraryName, l_strComment);
    l_strFunctionName = StrConcat2(Translate("Affected library : "), i_strFunctionName);
    l_strAbortMessage = StrConcat2(Translate("Abort message : "), i_strAbortMessage);
    l_strFunctionName = StrConcat2(Translate("Affected library : "), i_strFunctionName);
    l_arrAbortHandlerMessage.SetSize(0);
    l_arrAbortHandlerMessage.AddAsLast(l_strFunctionName);
    l_arrAbortHandlerMessage.AddAsLast(l_strAbortMessage);
    l_intReturnvalueDialog = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Internal abort handler message :  "), Translate("Error occurred - abort routine started - Press OK to abort the run."), l_arrAbortHandlerMessage);
    _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnvalueDialog);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, t_strFunctionName, t_strLibraryName, i_strAbortMessage);
    abort;
  }

  private function _DATA_CheckSequenceParameter( sequence & io_seqAspirationPosition, sequence & io_seqDispensePosition ) variable {
    private variable l_blnPromptDialog;
    private variable l_blnResetAspirationSequence;
    private variable l_blnResetDispenseSequence;
    private variable l_intCurrentPositionAspiration;
    private variable l_intCurrentPositionDispense;
    private variable l_intGetTotalAspirationSequence;
    private variable l_intGetTotalDispenseSequence;
    private variable l_retValueDialog;
    private variable l_strCurrentLabwareIDAspirationSequence;
    private variable l_strCurrentLabwareIDDispenseSequence;
    private variable l_strGetTotalAspirationSequence;
    private variable l_strCurrentPositionDispense;
    private variable l_strCheckAspirationSequenceMessage;
    private variable l_blnPromptDialogResetDispenseSequence;
    private variable l_blnPromptDialogResetAspirationSequence;
    private variable l_strCheckDispenseSequenceMessage;
    private variable l_strGetTotalDispenseSequence;
    private variable l_strCurrentPositionAspiration;
    private variable l_arrCheckSequenceMessage[];
    l_blnPromptDialog = ASWGLOBAL::BOOL::FALSE;
    l_blnPromptDialogResetAspirationSequence = ASWGLOBAL::BOOL::FALSE;
    l_blnPromptDialogResetDispenseSequence = ASWGLOBAL::BOOL::FALSE;
    l_blnResetAspirationSequence = ASWGLOBAL::BOOL::FALSE;
    l_blnResetDispenseSequence = ASWGLOBAL::BOOL::FALSE;
    l_intCurrentPositionAspiration = io_seqAspirationPosition.GetCurrentPosition();
    if (l_intCurrentPositionAspiration == 0)
    {
      l_blnPromptDialog = ASWGLOBAL::BOOL::TRUE;
      l_blnPromptDialogResetAspirationSequence = ASWGLOBAL::BOOL::TRUE;
    }
    l_strCurrentLabwareIDAspirationSequence = SeqGetLabwareId(io_seqAspirationPosition);
    l_intGetTotalAspirationSequence = SeqGetTotal(io_seqAspirationPosition);
    l_intCurrentPositionDispense = io_seqDispensePosition.GetCurrentPosition();
    if (l_intCurrentPositionDispense == 0)
    {
      l_blnPromptDialog = ASWGLOBAL::BOOL::TRUE;
      l_blnPromptDialogResetDispenseSequence = ASWGLOBAL::BOOL::TRUE;
    }
    l_strCurrentLabwareIDDispenseSequence = SeqGetLabwareId(io_seqDispensePosition);
    l_intGetTotalDispenseSequence = SeqGetTotal(io_seqDispensePosition);
    if (l_blnPromptDialog == ASWGLOBAL::BOOL::TRUE)
    {
      l_strCurrentPositionAspiration = StrIStr(l_intCurrentPositionAspiration);
      l_strCurrentPositionDispense = StrIStr(l_intCurrentPositionDispense);
      l_strGetTotalAspirationSequence = StrIStr(l_intGetTotalAspirationSequence);
      l_strGetTotalDispenseSequence = StrIStr(l_intGetTotalDispenseSequence);
      l_strCheckAspirationSequenceMessage = StrConcat8(Translate("Sequence Labware ID : "), l_strCurrentLabwareIDAspirationSequence, Translate("     Current position : "), l_strCurrentPositionAspiration, Translate("     Total positions : "), l_strGetTotalAspirationSequence, Translate(""), Translate(""));
      l_strCheckDispenseSequenceMessage = StrConcat8(Translate("Sequence Labware ID : "), l_strCurrentLabwareIDAspirationSequence, Translate("     Current position : "), l_strCurrentPositionDispense, Translate("     Total positions : "), l_strGetTotalDispenseSequence, Translate(""), Translate(""));
      l_arrCheckSequenceMessage.SetSize(0);
      l_arrCheckSequenceMessage.AddAsLast(Translate("Aspiration sequence"));
      l_arrCheckSequenceMessage.AddAsLast(Translate("- - - - - - - - - - - - - - - - "));
      l_arrCheckSequenceMessage.AddAsLast(l_strCheckAspirationSequenceMessage);
      l_arrCheckSequenceMessage.AddAsLast(Translate("- - - - - - - - - - - - - - - - "));
      l_arrCheckSequenceMessage.AddAsLast(Translate("Dispense sequence"));
      l_arrCheckSequenceMessage.AddAsLast(Translate("- - - - - - - - - - - - - - - - "));
      l_arrCheckSequenceMessage.AddAsLast(l_strCheckDispenseSequenceMessage);
      l_retValueDialog = VectorCustomDialogs::ListDialog(Translate(""), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Plausibility check : Sequence handling - check input parameter "), Translate("Hint : Use Data_CreateNewSequencesOrTransportSequences command to define sequneces within the main method. If  the current position of the sequence remains 0 - the main method will continue without current pipetting step."), l_arrCheckSequenceMessage);
      _DATA_TranslateVectorCustomDialogsErrorCodes(l_retValueDialog);
      if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
      {
        _DATA_IntegratedAbortHandler(Translate("Pipetting_Controller.smt "), Translate("_DATA_CheckSequenceParameter - Abort requested during pipetting command. Check sequence parameter of current pipetting step."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
      if (l_blnPromptDialogResetAspirationSequence == ASWGLOBAL::BOOL::TRUE)
      {
        l_blnResetAspirationSequence = VectorCustomDialogs::MessageDialog(Translate("Recovery - reset aspiration sequence during runtime."), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Do you want to set the current position of aspiration sequence to 1 in order to be able to continute testing?"));
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_blnResetAspirationSequence);
        if (l_blnResetAspirationSequence == ASWGLOBAL::DIALOG::OK)
        {
          SeqResetSequenceIndexes(io_seqAspirationPosition);
          io_seqAspirationPosition.SetCurrentPosition(1);
        }
      }
      if (l_blnPromptDialogResetDispenseSequence == ASWGLOBAL::BOOL::TRUE)
      {
        l_blnResetDispenseSequence = VectorCustomDialogs::MessageDialog(Translate("Recovery - reset dispense sequence during runtime."), VectorCustomDialogs::IconType::Question, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Do you want to set the current position of dispense sequence to 1 in order to be able to continute testing?"));
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_blnResetDispenseSequence);
        if (l_blnResetDispenseSequence == ASWGLOBAL::DIALOG::OK)
        {
          SeqResetSequenceIndexes(io_seqDispensePosition);
          io_seqDispensePosition.SetCurrentPosition(1);
        }
      }
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Check passed."), Translate(""));
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _EjectTips( device & ML_STAR, variable i_strChannelPattern ) variable {
    private variable l_intNumberOfLoops;
    private variable l_intNumberOfPositions;
    private variable l_strStepReturnValue;
    private variable l_intIndexNumberOfPositions;
    private variable l_intGetPositionFromNum;
    private variable l_intMainError;
    private variable l_intSlaveError;
    private variable l_blnRepeatTipEjectToRecoverError;
    t_seqWasteChannels.SetCurrentPosition(1);
    {
      for(l_intNumberOfLoops = 0; l_intNumberOfLoops < 5;)
      {
        l_intNumberOfLoops = l_intNumberOfLoops + 1;
        onerror goto errLabel_5 ;
        err.Clear();
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          	l_strStepReturnValue = arrRetValues[2];
        }
        break;
        errLabel_5 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          l_strStepReturnValue = ErrGetDataAt(3);
          l_intNumberOfPositions = StepReturn::GetNumberOfPositions(l_strStepReturnValue);
          {
            for(l_intIndexNumberOfPositions = 0; l_intIndexNumberOfPositions < l_intNumberOfPositions;)
            {
              l_intIndexNumberOfPositions = l_intIndexNumberOfPositions + 1;
              l_intGetPositionFromNum = StepReturn::GetPositionFromNum(l_intIndexNumberOfPositions, l_strStepReturnValue);
              l_intMainError = StepReturn::GetMainError(l_intIndexNumberOfPositions, l_strStepReturnValue);
              l_intSlaveError = StepReturn::GetSlaveError(l_intIndexNumberOfPositions, l_strStepReturnValue);
              if (l_intMainError != 0)
              {
                l_blnRepeatTipEjectToRecoverError = 0;
                if(l_intMainError ==2 && l_intSlaveError ==77)
                {
                  l_blnRepeatTipEjectToRecoverError =1;
                }
                if (l_blnRepeatTipEjectToRecoverError == 0)
                {
                  MECC::TraceComment(Translate("Automated errorhandling couldn£t recover the problem.\n\nIn that case there are other reasons for a tip not being able to be ejected by a channel the standard command will be repeated once to give the user the chance to use the default error handling.\nThe loop will be interupted for further repetitions"));
                  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  break;
                }
              }
            }
          }
        }   /* end if from skip handler if no error */
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function PIP_Channels_pLLD( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltDispenseHeightFromBottom, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense ) variable {
    private variable l_strVolume;
    private variable l_blnStringDispenseModeSurfaceEmpty;
    private variable l_strStepReturnValueDispense;
    private variable l_intMainLoopTransferLiquids;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strStepReturnValueAspiration;
    private variable l_intCurrentDispenseMode;
    private variable l_strTypeOfLabware;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intCurrentTipType;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    private variable l_intNumberOfSamples;
    private variable l_strCurrentDispenseMode;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strInformationToBeUpdated;
    private variable l_intMixCycleAspiration;
    private variable l_intMixCycleDispense;
    private variable l_strChannelPattern;
    private variable l_strTipCounterNameIntermediate;
    private variable l_arrFltVolumeContainerInMicroliter[];
    private variable l_blnPerformedAdditionalVolumeTransfer;
    private variable l_strComment;
    private variable l_blnSuccess;
    private sequence l_seqAspirationPositionPreselectedTrough;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strVolume = StrFStr(i_fltVolume);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    _DATA_SetRackVisibility(i_seqAspirationPosition, ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_blnStringDispenseModeSurfaceEmpty = StrFind(i_strLiquidClassNameTransfer, Translate("SurfaceEmpty"));
      l_blnSuccess = _DATA_PlausibilityCheckVolume(i_fltVolume, l_intCurrentTipType);
      _DATA_InterpreteLabwareID(ML_STAR, i_seqAspirationPosition, l_strTypeOfLabware);
      l_intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        l_blnSuccess = _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
        if (i_fltVolumeMixDispense == 0)
        {
          l_intMixCycleDispense = 0;
        }
        else
        {
          l_intMixCycleDispense = i_intMixCycles;
        }
        if (i_fltVolumeMixAspiration == 0)
        {
          l_intMixCycleAspiration = 0;
        }
        else
        {
          l_intMixCycleAspiration = i_intMixCycles;
        }
        MECC::TraceComment(Translate("********** Now pipetting reagents to destination plate"));
        if (l_intCurrentTipType == 1)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
        }
        if (l_intCurrentTipType == 5)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
        }
        if (l_intCurrentTipType == 23)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
        }
        {
          l_intMainLoopTransferLiquids = 0;
          while (
             (i_seqDispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seqDispensePosition, 1, i_seqAspirationPosition, 1);
            l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
            l_strChannelPattern = Translate("");
            l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPattern, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, i_seqDispensePosition);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            l_blnSuccess = _DATA_ManageMultipleTroughs(ML_STAR, i_fltVolume, 0, 0, i_seqAspirationPosition, i_strLiquidClassNameTransfer, l_strChannelPattern, l_blnPerformedAdditionalVolumeTransfer, l_seqAspirationPositionPreselectedTrough);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            if (l_blnPerformedAdditionalVolumeTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
            }
            _DATA_ComputeVolumeInLabware(ML_STAR, l_seqAspirationPositionPreselectedTrough, l_strChannelPattern, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
            t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterAspiration, l_arrFltVolumeContainerInMicroliter);
            if (i_fltDispenseHeightFromBottom == 0)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_ComputeVolumeInLabware(ML_STAR, i_seqDispensePosition, l_strChannelPattern, l_strStepReturnValueDispense, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
              t_arrFltVolumeContainerInMicroliterDispense = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterDispense, l_arrFltVolumeContainerInMicroliter);
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
            }
            l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPattern);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            if (i_blnIncrementAspirationSequence == ASWGLOBAL::BOOL::TRUE)
            {
              SeqIncrement(i_seqAspirationPosition, t_intNumberOfAllAvailableChannels);
            }
            SeqIncrement(i_seqDispensePosition, t_intNumberOfAllAvailableChannels);
            if (
               (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
          i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
          i_seqDispensePosition.SetCurrentPosition(1);
          i_seqAspirationPosition.SetCurrentPosition(1);
        }
      }
      if (l_strCurrentDispenseMode == "Part")
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Dispense Mode"));
        _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported dispense mode detected."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_Channels_MixOnly( device & ML_STAR, sequence i_seqAspirationPosition, variable i_fltAspirateHeightFromBottom, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltMixingVolume, variable i_blnPerformMixWithcLLDandFixheight ) variable {
    private variable l_strVolume;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    private variable l_strInformationToBeUpdated;
    private variable l_strStepReturnValueAspiration;
    private variable l_intCurrentDispenseMode;
    private variable l_strTypeOfLabware;
    private variable l_intCurrentTipType;
    private variable l_intVolumeMix;
    private variable l_intNumberOfActivatedChannels;
    private variable l_intVolumeMixPerChannel;
    private variable l_strChannelPatternMixOnly;
    private sequence l_seqAspirationMixOnly;
    private variable l_strTipCounterNameIntermediate;
    private variable l_intVolumeMixPerChannelMin;
    private variable l_intVolumeMixPerChannelMax;
    private variable l_intVolumeMaxTip;
    private variable l_arrLabwareIDsAspiration[];
    private variable l_intIndexMissingElements;
    private variable l_intMissingElementsWithinArrMixVolumes;
    private variable l_strComment;
    private variable l_blnSuccess;
    private variable l_arrFltVolumeContainerInMicroliter[];
    private variable l_intNumberOfLabwareIDs;
    private variable loopCounter1;
    private variable l_intChannelIndex;
    private variable l_fltCurrentVolume;
    private variable l_intSizeOfArray;
    private variable l_arrFltMixVolumeContainerInMicroliter[];
    private variable l_fltVolumeMixPerChannel;
    private variable l_blnTrimmedVolumeMax;
    private variable l_fltVolumeMixPerChannelTrimmed;
    private variable l_strChannelPatternMixOnly_Manilupated;
    private variable l_intIndexCurrentVolumeDetected;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
    SeqGetLabwareIds(i_seqAspirationPosition, l_arrLabwareIDsAspiration);
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("l_arrLabwareIDsAspiration"), l_arrLabwareIDsAspiration);
    l_intNumberOfLabwareIDs=l_arrLabwareIDsAspiration.GetSize();
    l_strLabwareIDOfSourceSequence = HSLExtensions::String::Join(l_arrLabwareIDsAspiration);
    if (i_blnPerformMixWithcLLDandFixheight == ASWGLOBAL::BOOL::TRUE)
    {
      l_strVolume = StrFStr(i_fltMixingVolume);
      l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
      l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
      o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
      l_strInformationToBeUpdated = StrConcat8(Translate("1st mix reagents at fix height"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfSourceSequence, Translate(". Initial mix volume :"), o_strTrimmedVolume, Translate(" µl. 2nd mix at cLLD with automatic volume."));
    }
    else
    {
      if (i_fltAspirateHeightFromBottom == 0)
      {
        o_strTrimmedVolume = Translate(" automated calculated by aspiration step");
        l_strInformationToBeUpdated = StrConcat8(Translate("Mix reagents"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfSourceSequence, Translate(". Mix volume defined by measurement."), Translate(""), Translate(""));
      }
      else
      {
        l_strVolume = StrFStr(i_fltMixingVolume);
        l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
        l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
        o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
        l_strInformationToBeUpdated = StrConcat8(Translate("Mix reagents at fix height"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfSourceSequence, Translate(". Initial mix volume "), o_strTrimmedVolume, Translate(" µl."));
      }
    }
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    _DATA_SetRackVisibility(i_seqAspirationPosition, ML_STAR);
    l_seqAspirationMixOnly = HSLExtensions::Sequence::Copy(i_seqAspirationPosition, 1);
    _DATA_InterpreteLabwareID(ML_STAR, l_seqAspirationMixOnly, l_strTypeOfLabware);
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
    if (l_intCurrentTipType == 1)
    {
      l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
      l_intVolumeMaxTip = 300;
      l_intVolumeMixPerChannelMax = 225;
      l_intVolumeMixPerChannelMin = 15;
    }
    if (l_intCurrentTipType == 5)
    {
      l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
      l_intVolumeMaxTip = 1000;
      l_intVolumeMixPerChannelMax = 750;
      l_intVolumeMixPerChannelMin = 20;
    }
    if (l_intCurrentTipType == 23)
    {
      l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
      l_intVolumeMaxTip = 50;
      l_intVolumeMixPerChannelMax = 37.5;
      l_intVolumeMixPerChannelMin = 5;
    }
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      l_blnTrimmedVolumeMax = ASWGLOBAL::BOOL::FALSE;
      {
        loopCounter1 = 0;
        while (
           (l_seqAspirationMixOnly.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, l_seqAspirationMixOnly, 1);
          loopCounter1 = loopCounter1 + 1;
          if (loopCounter1 == 1)
          {
            l_strChannelPatternMixOnly = Translate("");
            l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPatternMixOnly, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, l_seqAspirationMixOnly);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
          }
          l_intNumberOfActivatedChannels = StrReplace(l_strChannelPatternMixOnly, Translate("1"), Translate("1"));
          if (i_blnPerformMixWithcLLDandFixheight == ASWGLOBAL::BOOL::TRUE)
          {
            if (i_fltAspirateHeightFromBottom == 0)
            {
              i_fltAspirateHeightFromBottom = 0.5;
            }
          }
          if (i_fltAspirateHeightFromBottom > 0)
          {
            MECC::TraceComment(Translate("Mixing performed at fix height, liquid following switched off, volumes applied by input parameter"));
            if (l_strTypeOfLabware == "trough")
            {
              l_fltVolumeMixPerChannel = i_fltMixingVolume / (l_intNumberOfActivatedChannels * 1.0);
            }
            else
            {
              l_fltVolumeMixPerChannel = i_fltMixingVolume;
            }
            if (l_fltVolumeMixPerChannel > l_intVolumeMixPerChannelMax)
            {
              MECC::TraceComment(Translate("Mix volume limited to max 75% of current tip capacity"));
              l_fltVolumeMixPerChannel = l_intVolumeMixPerChannelMax;
              l_blnTrimmedVolumeMax = ASWGLOBAL::BOOL::TRUE;
              l_fltVolumeMixPerChannelTrimmed = l_fltVolumeMixPerChannel;
            }
            if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
            {
              l_fltVolumeMixPerChannel = l_intVolumeMixPerChannelMax;
            }
            if (l_intVolumeMixPerChannel < 0)
            {
              l_fltVolumeMixPerChannel = l_intVolumeMixPerChannelMin;
              MECC::TraceComment(Translate("300 ul tips used - low volume detected - leading to a negative mixing volume by accident - overwritten to a small volume to mix "));
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	l_strStepReturnValueAspiration = arrRetValues[2];
            }
          }
          if (i_blnPerformMixWithcLLDandFixheight == ASWGLOBAL::BOOL::TRUE)
          {
            MECC::TraceComment(Translate("Mixing with both options is selected (fix height and cLLD) - fix height will be performed first followed by cLLD.\ncLLD is triggered by fix height = 0. Manipulation of orig input parameter performed to activate cLLD."));
            i_fltAspirateHeightFromBottom = 0;
          }
          if (i_fltAspirateHeightFromBottom == 0)
          {
            MECC::TraceComment(Translate("Mixing performed using clld, liquid following switched on, volumes automatically calculated"));
            MECC::TraceComment(Translate("This step is just for measurement of volume"));
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	l_strStepReturnValueAspiration = arrRetValues[2];
            }
            _DATA_ComputeVolumeInLabware(ML_STAR, l_seqAspirationMixOnly, l_strChannelPatternMixOnly, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
            l_strChannelPatternMixOnly_Manilupated = Translate("");
            l_intSizeOfArray=l_arrFltVolumeContainerInMicroliter.GetSize();
            {
              for(l_intIndexCurrentVolumeDetected = 0; l_intIndexCurrentVolumeDetected < l_intSizeOfArray;)
              {
                l_intIndexCurrentVolumeDetected = l_intIndexCurrentVolumeDetected + 1;
                l_fltCurrentVolume=l_arrFltVolumeContainerInMicroliter.GetAt(l_intIndexCurrentVolumeDetected-1);
                if (l_fltCurrentVolume == 0)
                {
                  l_strChannelPatternMixOnly_Manilupated = StrConcat2(l_strChannelPatternMixOnly_Manilupated, Translate("0"));
                }
                else
                {
                  l_strChannelPatternMixOnly_Manilupated = StrConcat2(l_strChannelPatternMixOnly_Manilupated, Translate("1"));
                }
              }
            }
            l_strChannelPatternMixOnly_Manilupated = StrFillRight(l_strChannelPatternMixOnly_Manilupated, Translate("0"), t_intNumberOfAllAvailableChannels);
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strChannelPatternMixOnly_Manilupated after filling up to number of all active channels at system connected "), l_strChannelPatternMixOnly_Manilupated);
            l_arrFltMixVolumeContainerInMicroliter.SetSize(0);
            l_intSizeOfArray=l_arrFltVolumeContainerInMicroliter.GetSize();
            {
              for(l_intChannelIndex = 0; l_intChannelIndex < l_intSizeOfArray;)
              {
                l_intChannelIndex = l_intChannelIndex + 1;
                l_fltCurrentVolume=l_arrFltVolumeContainerInMicroliter.GetAt(l_intChannelIndex-1);
                l_intVolumeMix = l_fltCurrentVolume * 0.75;
                if (l_strTypeOfLabware == "trough")
                {
                  l_fltVolumeMixPerChannel = l_intVolumeMix / (l_intNumberOfActivatedChannels * 1.0);
                }
                else
                {
                  l_fltVolumeMixPerChannel = l_intVolumeMix;
                }
                if (l_fltVolumeMixPerChannel > l_intVolumeMixPerChannelMax)
                {
                  MECC::TraceComment(Translate("Mix volume limited to max 75% of current tip capacity"));
                  l_fltVolumeMixPerChannel = l_intVolumeMixPerChannelMax;
                  l_blnTrimmedVolumeMax = ASWGLOBAL::BOOL::TRUE;
                  l_fltVolumeMixPerChannelTrimmed = l_fltVolumeMixPerChannel;
                }
                if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
                {
                  l_fltVolumeMixPerChannel = l_intVolumeMixPerChannelMax;
                }
                if (l_intVolumeMixPerChannel < 0)
                {
                  l_fltVolumeMixPerChannel = l_intVolumeMixPerChannelMin;
                  MECC::TraceComment(Translate("300 ul tips used - low volume detected - leading to a negative mixing volume by accident - overwritten to a small volume to mix "));
                }
                l_arrFltMixVolumeContainerInMicroliter.AddAsLast(l_fltVolumeMixPerChannel);
              }
            }
            if (l_intSizeOfArray < 8)
            {
              l_intMissingElementsWithinArrMixVolumes = 8 - l_intSizeOfArray;
              {
                for(l_intIndexMissingElements = 0; l_intIndexMissingElements < l_intMissingElementsWithinArrMixVolumes;)
                {
                  l_intIndexMissingElements = l_intIndexMissingElements + 1;
                  l_arrFltMixVolumeContainerInMicroliter.AddAsLast(0);
                }
              }
            }
            TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("l_arrFltMixVolumeContainerInMicroliter :"), l_arrFltMixVolumeContainerInMicroliter);
            MECC::TraceComment(Translate("This step mix"));
            l_strInformationToBeUpdated = StrConcat4(Translate("Mixing volume applied to current tip type : "), l_fltVolumeMixPerChannel, Translate(" µl ."), Translate(""));
            l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	l_strStepReturnValueAspiration = arrRetValues[2];
            }
          }
          SeqIncrement(l_seqAspirationMixOnly, t_intNumberOfAllAvailableChannels);
          if (
             (l_seqAspirationMixOnly.GetCurrentPosition() > 0 && l_seqAspirationMixOnly.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        l_seqAspirationMixOnly.SetMax(l_seqAspirationMixOnly.GetTotal());
        l_seqAspirationMixOnly.SetCurrentPosition(1);
      }
      l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPatternMixOnly);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_GetLabwareIDAndSequenceNamesFromDeck( device & io_instrument, variable & o_arrayLabwareNames[], variable & o_arraySeqNames[] ) void {
    o_arrayLabwareNames.SetSize( 0);
    {
        object obj_Decklayout;
        obj_Decklayout = io_instrument.GetDeckLayoutObject();
        if (!obj_Decklayout.IsNull())
            {
                  object EditDecklayout5;
                  object Parameter;
                  object LabwareObjects;
                  object LabwareNames;
                  object SequenceNames;
                  variable Array_Keys[];
                  variable i;
                  variable _str_labID;
                  variable _str_seqName;
                  obj_Decklayout.GetObject("IEditDeckLayout5", EditDecklayout5);
                  LabwareObjects.CreateObject("HXPARAMSLib.HxPars");
                  SequenceNames.CreateObject("HXPARAMSLib.HxPars");
                  LabwareNames.CreateObject("HXPARAMSLib.HxPars");
                  //Get Labware IDs
                  obj_Decklayout.TemplateLabwareNames(LabwareObjects);
                  Array_Keys = LabwareObjects.GetKeys();
                  for(i=1; i<=Array_Keys.GetSize(); i++)
                  {
                      LabwareNames = LabwareObjects.Item1(i);
                      _str_labID = LabwareNames.Item1("Labwr_Id");
                      o_arrayLabwareNames.AddAsLast(_str_labID);
                  }
                  //Get Sequence Names
                  obj_Decklayout.DeckSequenceNames(SequenceNames);
                  for(i=1; i<=SequenceNames.Count(); i++)
                  {
                       _str_seqName = SequenceNames.Item (i);
                       o_arraySeqNames.AddAsLast(_str_seqName);
                  }
                  obj_Decklayout.ReleaseObject();
                  EditDecklayout5.ReleaseObject();
                  Parameter.ReleaseObject();
           }
    }
    MECC::TraceComment(Translate("**************************** HSL Code Complete **************************** "));
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Labware names"), o_arrayLabwareNames);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Sequence names"), o_arraySeqNames);
  }

  function Init( device & ML_STAR, variable i_blnDeactivatePipettingStepsForTransportTests, variable i_strFullPathReportFile, sequence i_seqWasteChannels, variable i_intMPH96PickUpSide, variable i_ActivateIntegratedAbortHandler, variable & o_strNameAndVersion ) variable {
    private variable l_strTransferVolume;
    private variable l_strPosIDTarget;
    private variable l_strLabIDSource;
    private variable l_strCurrentTime;
    private variable l_strCurrentDate;
    private variable l_strPosIDSource;
    private variable l_intArrayPosition;
    private variable l_strLabIDTarget;
    private variable l_arrIndexes[];
    private variable l_arrSequenceNames[];
    private variable l_arrLabwareNames[];
    private variable l_strTranslatedPipettingInformationDispense;
    private variable l_strTranslatedPipettingInformationAspiration;
    private variable l_strTranslatedTransportInformation;
    private variable l_strBarcodeInformation;
    private sequence l_seqTipSupport;
    private variable l_blnTipSupportDoNotExist;
    private file l_hdlARWReportFile;
    private variable l_strGetTypeOfVariable;
    private variable l_strTipCounterName;
    private variable l_intTipCounterIndex;
    private variable l_intNumberOfTipCounterNames;
    private variable l_intReturnValueATML;
    private variable l_intFoundString;
    private variable l_strReleaseVersion;
    private variable l_strComment;
    private variable l_str_ReturnNameAndVersion;
    private variable l_strControllerVersion;
    private variable l_strDescription;
    private variable l_blnSuccess;
    o_strNameAndVersion = 0;
    t_intTraceLevel = TRACELEVEL::GetTraceLevel();
    t_strLibraryName = Translate("");
    t_strFunctionName = Translate("");
    l_strControllerVersion = Translate("");
    l_str_ReturnNameAndVersion = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    l_strControllerVersion = "0.9.20";
    t_strLibraryNameWithoutExtension = HSLExtensions::File::GetFileNameWithoutExtension(t_strLibraryName);
    o_strNameAndVersion = StrConcat4(t_strLibraryNameWithoutExtension, Translate(" "), l_strControllerVersion, Translate(""));
    l_strDescription = o_strNameAndVersion;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strDescription);
    t_blnDeactivatePipettingStepsForTransportTests = i_blnDeactivatePipettingStepsForTransportTests;
    t_activateIntegratedAbortHandler = i_ActivateIntegratedAbortHandler;
    t_blnLockUnlockSystem = ASWGLOBAL::BOOL::TRUE;
    t_blnSimulationModeON = Util::GetSimulationMode();
    MECC::TraceComment(Translate("Get total number of channels bound to the system"));
    t_intNumberOfAllAvailableChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    MECC::TraceComment(Translate("build channel pattern based on total number of channels"));
    t_strChannelpattern = Translate("");
    t_strChannelpattern = StrFillLeft(t_strChannelpattern, Translate("1"), t_intNumberOfAllAvailableChannels);
    t_arr_strLabwareIds_Asp.SetSize(0);
    t_arr_fltVolumes.SetSize(0);
    t_arrFltVolumeContainerInMicroliterAspiration.SetSize(0);
    t_arrFltVolumeContainerInMicroliterDispense.SetSize(0);
    _DATA_CheckSytemConnected(ML_STAR);
    if (t_intPlatformType == 0)
    {
      MECC::TraceComment(Translate("Platform type detection responds a STARline based platform."));
    }
    else
    {
      MECC::TraceComment(Translate("Platform type detection responds a STARVline based platform."));
    }
    l_strReleaseVersion = DevGetReleaseVersion(ML_STAR);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strReleaseVersion: "), l_strReleaseVersion);
    SeqCopySequence(t_seqWasteChannels, i_seqWasteChannels);
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    _DATA_GetLabwareIDAndSequenceNamesFromDeck(ML_STAR, l_arrLabwareNames, l_arrSequenceNames);
    t_intMPH96TipPickUpSide = i_intMPH96PickUpSide;
    l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetTipCounterNames(t_arrTipCounterNames);
    l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_intNumberOfTipCounterNames=t_arrTipCounterNames.GetSize();
    {
      for(l_intTipCounterIndex = 0; l_intTipCounterIndex < l_intNumberOfTipCounterNames;)
      {
        l_intTipCounterIndex = l_intTipCounterIndex + 1;
        l_strTipCounterName=t_arrTipCounterNames.GetAt(l_intTipCounterIndex-1);
        l_intFoundString = StrFind(l_strTipCounterName, Translate("1000"));
        if (l_intFoundString >= 0)
        {
          t_strTipCounterNameTip1000 = l_strTipCounterName;
          l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetNumberOfRemainingTips(l_strTipCounterName, t_intMaxSeqTips1000AfterEdit);
          l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
          l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetSequenceFromName(l_strTipCounterName, t_seqTips1000);
          l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
          t_intConsumedTips1000BeforeRelaodTips = 0;
          t_intConsumedTips1000 = 0;
          t_intScheduledTipsPerSampleTip1000 = 0;
          t_intScheduledNumberOfExtraTip1000 = 0;
          t_intTotalConsumedTips1000 = 0;
        }
        l_intFoundString = StrFind(l_strTipCounterName, Translate("300"));
        if (l_intFoundString >= 0)
        {
          t_strTipCounterNameTip300 = l_strTipCounterName;
          l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetNumberOfRemainingTips(l_strTipCounterName, t_intMaxSeqTips300AfterEdit);
          l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
          l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetSequenceFromName(l_strTipCounterName, t_seqTips300);
          l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
          t_intConsumedTips300BeforeRelaodTips = 0;
          t_intConsumedTips300 = 0;
          t_intScheduledTipsPerSampleTip300 = 0;
          t_intScheduledNumberOfExtraTip300 = 0;
          t_intTotalConsumedTips300 = 0;
        }
        l_intFoundString = StrFind(l_strTipCounterName, Translate("50"));
        if (l_intFoundString >= 0)
        {
          t_strTipCounterNameTip50 = l_strTipCounterName;
          l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetNumberOfRemainingTips(l_strTipCounterName, t_intMaxSeqTips50AfterEdit);
          l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
          l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetSequenceFromName(l_strTipCounterName, t_seqTips50);
          l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
          t_intConsumedTips50BeforeRelaodTips = 0;
          t_intConsumedTips50 = 0;
          t_intScheduledTipsPerSampleTip50 = 0;
          t_intScheduledNumberOfExtraTip50 = 0;
          t_intTotalConsumedTips50 = 0;
        }
      }
    }
    l_arrIndexes = HSLExtensions::Array::FindValue(l_arrSequenceNames, Translate("TipSupport"));
    l_blnTipSupportDoNotExist = HSLExtensions::Array::IsEmpty(l_arrIndexes);
    if (l_blnTipSupportDoNotExist == ASWGLOBAL::BOOL::FALSE)
    {
      l_intArrayPosition = l_arrIndexes.ElementAt( 1 -1);
      DevGetSequenceRef(ML_STAR, l_arrSequenceNames.ElementAt( l_intArrayPosition -1), l_seqTipSupport);
      SeqRemoveAll(t_seqTipSupport);
      SeqCopySequence(t_seqTipSupport, l_seqTipSupport);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Sequence of tip support handed over to submethod library:   "), l_arrSequenceNames.ElementAt( l_intArrayPosition -1));
    }
    else
    {
      TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("l_arrIndexes "), l_arrIndexes);
    }
    l_arrIndexes.SetSize(0);
    l_strGetTypeOfVariable = StrGetType(i_strFullPathReportFile);
    if (l_strGetTypeOfVariable == "i")
    {
      i_strFullPathReportFile = StrIStr(i_strFullPathReportFile);
    }
    if (i_strFullPathReportFile == "")
    {
      l_strCurrentDate = TimGetFormattedDate(Translate("%Y%m%d"));
      l_strCurrentTime = TimGetFormattedTime(Translate("%H%M%S"));
      t_strFullPathReportFile = StrConcat12(Translate("C:\\Program Files (x86)\\HAMILTON\\LogFiles\\"), l_strCurrentDate, Translate("_"), l_strCurrentTime, Translate("_"), Translate("PipettingReport"), Translate(""), Translate(""), Translate(".xls"), Translate(""), Translate(""), Translate(""));
      onerror goto errLabel_6 ;
      err.Clear();
      l_hdlARWReportFile.SetExtendedProperties( "HDR=NO");
      l_hdlARWReportFile.AddField("Date", l_strCurrentDate, hslString, 255);
      l_hdlARWReportFile.AddField("Time", l_strCurrentTime, hslString, 255);
      l_hdlARWReportFile.AddField("LabID Source", l_strLabIDSource, hslString, 255);
      l_hdlARWReportFile.AddField("PosID Source", l_strPosIDSource, hslString, 255);
      l_hdlARWReportFile.AddField("Transfer Volume", l_strTransferVolume, hslString, 255);
      l_hdlARWReportFile.AddField("LabID Target", l_strLabIDTarget, hslString, 255);
      l_hdlARWReportFile.AddField("PosID Target", l_strPosIDTarget, hslString, 255);
      l_hdlARWReportFile.AddField("Barcode", l_strBarcodeInformation, hslString, 255);
      l_hdlARWReportFile.AddField("Transport information", l_strTranslatedTransportInformation, hslString, 255);
      l_hdlARWReportFile.AddField("Aspiration information", l_strTranslatedPipettingInformationAspiration, hslString, 255);
      l_hdlARWReportFile.AddField("Dispense information", l_strTranslatedPipettingInformationDispense, hslString, 255);
      if( 0 == l_hdlARWReportFile.Open(t_strFullPathReportFile + " " + "RuntimeReport", hslWrite) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
      }
      errLabel_6 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        _DATA_IntegratedAbortHandler(Translate("VoVPipetting_Controller.smt "), Translate("Init. This smt defines : Sequences for Tips, Sequence for Transport Tool, Variable for Transport Tool and sets simulation mode for all local smts"));
        return (ASWGLOBAL::BOOL::FALSE);
      }   /* end if from skip handler if no error */
      if( 0 != l_hdlARWReportFile.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      l_hdlARWReportFile.RemoveFields();
    }
    else
    {
      t_strFullPathReportFile = i_strFullPathReportFile;
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_MPH_CleanUpTipSupport( device & ML_STAR, variable i_blnStoreTipsBackToSequence ) variable {
    private variable l_intReturnValueATML;
    private variable l_strComment;
    private variable l_blnSuccess;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    if (i_blnStoreTipsBackToSequence == ASWGLOBAL::BOOL::TRUE)
    {
      l_intReturnValueATML = TIPMANAGEMENTLIBRARY::MPH96_CleanUpTipSupport(ML_STAR, t_seqTipSupport);
    }
    else
    {
      l_intReturnValueATML = TIPMANAGEMENTLIBRARY::MPH96_ForceEmptyTipSupport(ML_STAR);
    }
    l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (t_intPlatformType == 0)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_TranslateChannelErrorCodes( variable i_intChannelPerformedTransportOrPipetteStep, variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedPipettingInformaton ) void {
    private variable l_strMainError;
    private variable l_strSlaveError;
    private variable l_strErrorRecovery;
    private variable l_intErrorValue;
    o_strTranslatedPipettingInformaton = 0;
    l_intErrorValue = 0;
    l_strMainError = Translate("unknown error");
    l_strSlaveError = Translate("unknown error");
    l_strErrorRecovery = Translate("unknown error");
    if (i_intMainError == 0)
    {
      l_strMainError = Translate("No main error.");
    }
    if (i_intMainError == 1)
    {
      l_strMainError = Translate("Syntax error.");
    }
    if (i_intMainError == 2)
    {
      l_strMainError = Translate("Hardware error. Drive blocked, low power etc.");
    }
    if (i_intMainError == 3)
    {
      l_strMainError = Translate("Not Executed Error. There was an error in previous part command.");
    }
    if (i_intMainError == 4)
    {
      l_strMainError = Translate("Clot Error. Tip blocked.");
    }
    if (i_intMainError == 5)
    {
      l_strMainError = Translate("Barcode unreadable. Bad or missing barcode.");
    }
    if (i_intMainError == 6)
    {
      l_strMainError = Translate("Insufficient Liquid Error. Not enough liquid available.");
    }
    if (i_intMainError == 7)
    {
      l_strMainError = Translate("Tip already fitted. Repeated attempts to fit a tip or iSwap movement with tips.");
    }
    if (i_intMainError == 8)
    {
      l_strMainError = Translate("No Tip. Command was started without fitting tip. Tip was not fitted or fell off again.");
    }
    if (i_intMainError == 9)
    {
      l_strMainError = Translate("No Carrier. Load command without carrier performed.");
    }
    if (i_intMainError == 10)
    {
      l_strMainError = Translate("Not completed. Command in command buffer was aborted due to an error in a previous command, or command stack was deleted.");
    }
    if (i_intMainError == 11)
    {
      l_strMainError = Translate("Pressure LLD Error. A dispense with pressure liquid level detection is not allowed.");
    }
    if (i_intMainError == 12)
    {
      l_strMainError = Translate("No teach signal. X-Movement to LLD reached maximum allowable position without detecting teach signal.");
    }
    if (i_intMainError == 13)
    {
      l_strMainError = Translate("Loading tray error. Position already occupied.");
    }
    if (i_intMainError == 14)
    {
      l_strMainError = Translate("Pressure LLD Error. Pressure liquid level detection in a consecutive aspiration is not allowed.");
    }
    if (i_intMainError == 15)
    {
      l_strMainError = Translate("Not allowed parameter combination. I.e. pLLD and dispense or wrong X-drive assignment.");
    }
    if (i_intMainError == 16)
    {
      l_strMainError = Translate("Cover close error. Cover is not closed and couldn't be locked.");
    }
    if (i_intMainError == 17)
    {
      l_strMainError = Translate("Improper Aspiration or Dispense Error. The pressure-based aspiration / dispensation control reported an error ( not enough liquid ).");
    }
    if (i_intMainError == 18)
    {
      l_strMainError = Translate("Wash fluid or waste error. Missing wash fluid OR waste of particular washer is full.");
    }
    if (i_intMainError == 19)
    {
      l_strMainError = Translate("Incubation error. Incubator temperature out of limit.");
    }
    if (i_intMainError == 20)
    {
      l_strMainError = Translate("TADM overshot. Overshot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 21)
    {
      l_strMainError = Translate("No element. Expected element not detected.");
    }
    if (i_intMainError == 22)
    {
      l_strMainError = Translate("Element still holding. Get command is sent twice or element is not discarded.");
    }
    if (i_intMainError == 23)
    {
      l_strMainError = Translate("Element lost. Expected element is missing or lost.");
    }
    if (i_intMainError == 24)
    {
      l_strMainError = Translate("Illegal target plate position. Over or underflow of iSWAP positions OR iSWAP is not in park position during pipetting activities.");
    }
    if (i_intMainError == 25)
    {
      l_strMainError = Translate("Illegal user access. Carrier was manually removed or cover is open (immediate stop is executed).");
    }
    if (i_intMainError == 26)
    {
      l_strMainError = Translate("TADM undershot. Undershot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 27)
    {
      l_strMainError = Translate("Position Error. The position is out of range.");
    }
    if (i_intMainError == 28)
    {
      l_strMainError = Translate("Unexpected cLLD Error. The cLLD detected a liquid level above start height of liquid level search.");
    }
    if (i_intMainError == 29)
    {
      l_strMainError = Translate("Area already occupied. Its impossible to occupy area because this area is already in use.");
    }
    if (i_intMainError == 30)
    {
      l_strMainError = Translate("Impossible to occupy area. Area can't be occupied because is no solution for arm prepositioning.");
    }
    if (i_intMainError == 31)
    {
      l_strMainError = Translate("Anti drop control error. Anti drop controlling out of tolerance.");
    }
    if (i_intMainError == 32)
    {
      l_strMainError = Translate("Parameter out of range.");
    }
    if (i_intMainError == 33)
    {
      l_strMainError = Translate("Parameter does not belong to command, or not all parameters were sent.");
    }
    if (i_intMainError == 34)
    {
      l_strMainError = Translate("Node name unknown.");
    }
    if (i_intMainError == 35)
    {
      l_strMainError = Translate("ID parameter error.");
    }
    if (i_intMainError == 37)
    {
      l_strMainError = Translate("Node name defined twice.");
    }
    if (i_intMainError == 38)
    {
      l_strMainError = Translate("Faulty XL channel settings.");
    }
    if (i_intMainError == 39)
    {
      l_strMainError = Translate("Faulty robotic channel settings.");
    }
    if (i_intMainError == 40)
    {
      l_strMainError = Translate("PIP task busy.");
    }
    if (i_intMainError == 41)
    {
      l_strMainError = Translate("Auto load task busy.");
    }
    if (i_intMainError == 42)
    {
      l_strMainError = Translate("Miscellaneous task busy.");
    }
    if (i_intMainError == 43)
    {
      l_strMainError = Translate("Incubator task busy.");
    }
    if (i_intMainError == 44)
    {
      l_strMainError = Translate("Washer task busy.");
    }
    if (i_intMainError == 45)
    {
      l_strMainError = Translate("iSWAP task busy.");
    }
    if (i_intMainError == 46)
    {
      l_strMainError = Translate("CoRe 96 head task busy.");
    }
    if (i_intMainError == 47)
    {
      l_strMainError = Translate("Carrier sensor doesn't work properly.");
    }
    if (i_intMainError == 48)
    {
      l_strMainError = Translate("CoRe 384 head task busy.");
    }
    if (i_intMainError == 49)
    {
      l_strMainError = Translate("Nano pipettor task busy.");
    }
    if (i_intMainError == 50)
    {
      l_strMainError = Translate("XL channel task busy.");
    }
    if (i_intMainError == 51)
    {
      l_strMainError = Translate("Tube gripper task busy.");
    }
    if (i_intMainError == 52)
    {
      l_strMainError = Translate("Imaging channel task busy.");
    }
    if (i_intMainError == 53)
    {
      l_strMainError = Translate("Robotic channel task busy.");
    }
    if (i_intMainError == 99)
    {
      l_strMainError = Translate("Slave Error. This error code indicates an error in one of the slaves.");
    }
    if (i_intMainError == 102)
    {
      l_strMainError = Translate("Liquid Level Error. Liquid surface not detected.");
    }
    if (i_intMainError == 104)
    {
      l_strMainError = Translate("Not Aspirated Error. Dispense volume exceeds the aspirated volume.");
    }
    if (i_intMainError == 105)
    {
      l_strMainError = Translate("Improper Dispensation Error. The dispensed volume is out of tolerance (may only occur for Nano Pipettor Dispense steps).");
    }
    if (i_intSlaveError == 0)
    {
      l_strSlaveError = Translate("No slave error.");
    }
    if (i_intSlaveError == 20)
    {
      l_strSlaveError = Translate("No I²C Bus or EEPROM not working. Transfer check error. No communication to EEPROM.");
    }
    if (i_intSlaveError == 30)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined command.");
    }
    if (i_intSlaveError == 31)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined parameter.");
    }
    if (i_intSlaveError == 32)
    {
      l_strSlaveError = Translate("Syntax check error. Parameter out of range.");
    }
    if (i_intSlaveError == 35)
    {
      l_strSlaveError = Translate("General error during execution of commands. Voltages outside permitted range.");
    }
    if (i_intSlaveError == 36)
    {
      l_strSlaveError = Translate("General error during execution of commands. Stop during execution of a command.");
    }
    if (i_intSlaveError == 37)
    {
      l_strSlaveError = Translate("General error during execution of commands. Movement interrupted. 2nd CORE gripper pipetting channel has a step loss.");
    }
    if (i_intSlaveError == 40)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process.");
    }
    if (i_intSlaveError == 50)
    {
      l_strSlaveError = Translate("Dispensing drive - Init position not found.");
    }
    if (i_intSlaveError == 51)
    {
      l_strSlaveError = Translate("Dispensing drive - Drive not initialized.");
    }
    if (i_intSlaveError == 52)
    {
      l_strSlaveError = Translate("Dispensing drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 53)
    {
      l_strSlaveError = Translate("Dispensing drive - Step monitoring. Maximum volume in tip reached.");
    }
    if (i_intSlaveError == 54)
    {
      l_strSlaveError = Translate("Dispensing drive - Position monitoring. Position out of permitted area.");
    }
    if (i_intSlaveError == 55)
    {
      l_strSlaveError = Translate("Y-drive - drive blocked.");
    }
    if (i_intSlaveError == 56)
    {
      l_strSlaveError = Translate("Y-drive - drive not initialized.");
    }
    if (i_intSlaveError == 57)
    {
      l_strSlaveError = Translate("Y-drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 60)
    {
      l_strSlaveError = Translate("Z-drive - drive blocked.");
    }
    if (i_intSlaveError == 61)
    {
      l_strSlaveError = Translate("Z-drive - drive not initialized.");
    }
    if (i_intSlaveError == 62)
    {
      l_strSlaveError = Translate("Z-drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 65)
    {
      l_strSlaveError = Translate("Squeezer -drive - drive blocked.");
    }
    if (i_intSlaveError == 66)
    {
      l_strSlaveError = Translate("Squeezer -drive - drive not initialized.");
    }
    if (i_intSlaveError == 67)
    {
      l_strSlaveError = Translate("Squeezer -drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 68)
    {
      l_strSlaveError = Translate("Squeezer -drive - Init position adjustment error.");
    }
    if (i_intSlaveError == 70)
    {
      l_strSlaveError = Translate("Liquid level detection - No liquid level found.");
    }
    if (i_intSlaveError == 71)
    {
      l_strSlaveError = Translate("Liquid level detection - Not enough liquid present.");
    }
    if (i_intSlaveError == 72)
    {
      l_strSlaveError = Translate("Liquid level detection - Auto calibration at pressure sensor not possible.");
    }
    if (i_intSlaveError == 73)
    {
      l_strSlaveError = Translate("Liquid level detection - No liquid level found with dual LLD.");
    }
    if (i_intSlaveError == 74)
    {
      l_strSlaveError = Translate("Liquid level detection - Liquid at a not allowed position detected.");
    }
    if (i_intSlaveError == 80)
    {
      l_strSlaveError = Translate("Liquid handling - Liquid not correctly aspirated.");
    }
    if (i_intSlaveError == 81)
    {
      l_strSlaveError = Translate("Liquid handling - Clot detected.");
    }
    if (i_intSlaveError == 82)
    {
      l_strSlaveError = Translate("Liquid handling - TADM measurement out of lower limit curve.");
    }
    if (i_intSlaveError == 83)
    {
      l_strSlaveError = Translate("Liquid handling - TADM measurement out of upper limit curve.");
    }
    if (i_intSlaveError == 84)
    {
      l_strSlaveError = Translate("Liquid handling - Not enough memory for TADM measurement.");
    }
    if (i_intSlaveError == 85)
    {
      l_strSlaveError = Translate("Liquid handling - No communication to digital potentiometer.");
    }
    if (i_intSlaveError == 86)
    {
      l_strSlaveError = Translate("Liquid handling - ADC algorithm error.");
    }
    if (i_intSlaveError == 87)
    {
      l_strSlaveError = Translate("Liquid handling - 2nd phase of liquid not found.");
    }
    if (i_intSlaveError == 88)
    {
      l_strSlaveError = Translate("Liquid handling - Not enough 2nd phase of liquid present. Immersion depth or surface following position below minimal access range.");
    }
    if (i_intSlaveError == 90)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve not resetable.");
    }
    if (i_intSlaveError == 91)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve not programable.");
    }
    if (i_intSlaveError == 92)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve name not found.");
    }
    if (i_intSlaveError == 93)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve data incorrect.");
    }
    if (i_intSlaveError == 94)
    {
      l_strSlaveError = Translate("TADM limit curve - not enough memory for limit curve.");
    }
    if (i_intSlaveError == 95)
    {
      l_strSlaveError = Translate("TADM limit curve - not allowed limit curve index.");
    }
    if (i_intSlaveError == 96)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve already stored.");
    }
    if (i_intSlaveError == 99)
    {
      l_strSlaveError = Translate("Pipetting head error - Return mesage of the command CH includes a pipetting head error.");
    }
    if (i_intErrorRecovery == 0)
    {
      l_strErrorRecovery = Translate("No recovery.");
    }
    if (i_intErrorRecovery == 1)
    {
      l_strErrorRecovery = Translate("Abort - Run aborted.");
    }
    if (i_intErrorRecovery == 2)
    {
      l_strErrorRecovery = Translate("Cancel - run canceled or user defined errorhandling  was executed.");
    }
    if (i_intErrorRecovery == 3)
    {
      l_strErrorRecovery = Translate("Initialize. Instrument initialized again.");
    }
    if (i_intErrorRecovery == 4)
    {
      l_strErrorRecovery = Translate("Repeat. Command repeated.");
    }
    if (i_intErrorRecovery == 5)
    {
      l_strErrorRecovery = Translate("Exclude. Channel or position excluded until next tip pick up.");
    }
    if (i_intErrorRecovery == 6)
    {
      l_strErrorRecovery = Translate("Waste. Tip ejected to the default waste.");
    }
    if (i_intErrorRecovery == 7)
    {
      l_strErrorRecovery = Translate("Air. Rest of missing volume filled up with air.");
    }
    if (i_intErrorRecovery == 8)
    {
      l_strErrorRecovery = Translate("Bottom. Aspiration repeated on container bottom.");
    }
    if (i_intErrorRecovery == 9)
    {
      l_strErrorRecovery = Translate("Continue. Run continued without any change.");
    }
    if (i_intErrorRecovery == 10)
    {
      l_strErrorRecovery = Translate("Barcode. Barcode assigned manually.");
    }
    if (i_intErrorRecovery == 11)
    {
      l_strErrorRecovery = Translate("Next. Command repeated on next sequence position.");
    }
    if (i_intErrorRecovery == 12)
    {
      l_strErrorRecovery = Translate("Available. Available volume used.");
    }
    if (l_strMainError == "unknown error")
    {
      l_strMainError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strSlaveError == "unknown error")
    {
      l_strSlaveError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strErrorRecovery == "unknown error")
    {
      l_strErrorRecovery = Translate(" error not translated by library - check log file to retrieve data");
    }
    l_strMainError = StrConcat4(l_strMainError, Translate(" - code : "), i_intMainError, Translate(""));
    l_strSlaveError = StrConcat4(l_strSlaveError, Translate(" - code : "), i_intSlaveError, Translate(""));
    l_strErrorRecovery = StrConcat4(l_strErrorRecovery, Translate(" - code : "), i_intErrorRecovery, Translate(""));
    l_intErrorValue = l_intErrorValue + i_intMainError;
    l_intErrorValue = l_intErrorValue + i_intSlaveError;
    l_intErrorValue = l_intErrorValue + i_intErrorRecovery;
    if (l_intErrorValue == 0)
    {
      if (i_intChannelPerformedTransportOrPipetteStep == 1)
      {
        o_strTranslatedPipettingInformaton = Translate("pipetting step ok.");
      }
      if (i_intChannelPerformedTransportOrPipetteStep == 2)
      {
        o_strTranslatedPipettingInformaton = Translate("transport step ok.");
      }
    }
    else
    {
      o_strTranslatedPipettingInformaton = StrConcat8(l_strMainError, Translate(" ; "), l_strSlaveError, Translate(" ; "), l_strErrorRecovery, Translate(""), Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_intMainError : "), i_intMainError);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_intSlaveError : "), i_intSlaveError);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_intErrorRecovery : "), i_intErrorRecovery);
    }
  }

  private function _DATA_TranslateMultiProbeHead96ErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedPipettingInformaton ) void {
    private variable l_strMainError;
    private variable l_intErrorValue;
    private variable l_strErrorRecovery;
    private variable l_strSlaveError;
    o_strTranslatedPipettingInformaton = 0;
    l_intErrorValue = 0;
    l_strMainError = Translate("unknown error");
    l_strSlaveError = Translate("unknown error");
    l_strErrorRecovery = Translate("unknown error");
    if (i_intMainError == 0)
    {
      l_strMainError = Translate("No main error.");
    }
    if (i_intMainError == 1)
    {
      l_strMainError = Translate("Syntax error.");
    }
    if (i_intMainError == 2)
    {
      l_strMainError = Translate("Hardware error. Drive blocked, low power etc.");
    }
    if (i_intMainError == 3)
    {
      l_strMainError = Translate("Not Executed Error. There was an error in previous part command.");
    }
    if (i_intMainError == 4)
    {
      l_strMainError = Translate("Clot Error. Tip blocked.");
    }
    if (i_intMainError == 5)
    {
      l_strMainError = Translate("Barcode unreadable. Bad or missing barcode.");
    }
    if (i_intMainError == 6)
    {
      l_strMainError = Translate("Insufficient Liquid Error. Not enough liquid available.");
    }
    if (i_intMainError == 7)
    {
      l_strMainError = Translate("Tip already fitted. Repeated attempts to fit a tip or iSwap movement with tips.");
    }
    if (i_intMainError == 8)
    {
      l_strMainError = Translate("No Tip. Command was started without fitting tip. Tip was not fitted or fell off again.");
    }
    if (i_intMainError == 9)
    {
      l_strMainError = Translate("No Carrier. Load command without carrier performed.");
    }
    if (i_intMainError == 10)
    {
      l_strMainError = Translate("Not completed. Command in command buffer was aborted due to an error in a previous command, or command stack was deleted.");
    }
    if (i_intMainError == 11)
    {
      l_strMainError = Translate("Pressure LLD Error. A dispense with pressure liquid level detection is not allowed.");
    }
    if (i_intMainError == 12)
    {
      l_strMainError = Translate("No teach signal. X-Movement to LLD reached maximum allowable position without detecting teach signal.");
    }
    if (i_intMainError == 13)
    {
      l_strMainError = Translate("Loading tray error. Position already occupied.");
    }
    if (i_intMainError == 14)
    {
      l_strMainError = Translate("Pressure LLD Error. Pressure liquid level detection in a consecutive aspiration is not allowed.");
    }
    if (i_intMainError == 15)
    {
      l_strMainError = Translate("Not allowed parameter combination. I.e. pLLD and dispense or wrong X-drive assignment.");
    }
    if (i_intMainError == 16)
    {
      l_strMainError = Translate("Cover close error. Cover is not closed and couldn't be locked.");
    }
    if (i_intMainError == 17)
    {
      l_strMainError = Translate("Improper Aspiration or Dispense Error. The pressure-based aspiration / dispensation control reported an error ( not enough liquid ).");
    }
    if (i_intMainError == 18)
    {
      l_strMainError = Translate("Wash fluid or waste error. Missing wash fluid OR waste of particular washer is full.");
    }
    if (i_intMainError == 19)
    {
      l_strMainError = Translate("Incubation error. Incubator temperature out of limit.");
    }
    if (i_intMainError == 20)
    {
      l_strMainError = Translate("TADM overshot. Overshot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 21)
    {
      l_strMainError = Translate("No element. Expected element not detected.");
    }
    if (i_intMainError == 22)
    {
      l_strMainError = Translate("Element still holding. Get command is sent twice or element is not discarded.");
    }
    if (i_intMainError == 23)
    {
      l_strMainError = Translate("Element lost. Expected element is missing or lost.");
    }
    if (i_intMainError == 24)
    {
      l_strMainError = Translate("Illegal target plate position. Over or underflow of iSWAP positions OR iSWAP is not in park position during pipetting activities.");
    }
    if (i_intMainError == 25)
    {
      l_strMainError = Translate("Illegal user access. Carrier was manually removed or cover is open (immediate stop is executed).");
    }
    if (i_intMainError == 26)
    {
      l_strMainError = Translate("TADM undershot. Undershot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 27)
    {
      l_strMainError = Translate("Position Error. The position is out of range.");
    }
    if (i_intMainError == 28)
    {
      l_strMainError = Translate("Unexpected cLLD Error. The cLLD detected a liquid level above start height of liquid level search.");
    }
    if (i_intMainError == 29)
    {
      l_strMainError = Translate("Area already occupied. Its impossible to occupy area because this area is already in use.");
    }
    if (i_intMainError == 30)
    {
      l_strMainError = Translate("Impossible to occupy area. Area can't be occupied because is no solution for arm prepositioning.");
    }
    if (i_intMainError == 31)
    {
      l_strMainError = Translate("Anti drop control error. Anti drop controlling out of tolerance.");
    }
    if (i_intMainError == 32)
    {
      l_strMainError = Translate("Parameter out of range.");
    }
    if (i_intMainError == 33)
    {
      l_strMainError = Translate("Parameter does not belong to command, or not all parameters were sent.");
    }
    if (i_intMainError == 34)
    {
      l_strMainError = Translate("Node name unknown.");
    }
    if (i_intMainError == 35)
    {
      l_strMainError = Translate("ID parameter error.");
    }
    if (i_intMainError == 37)
    {
      l_strMainError = Translate("Node name defined twice.");
    }
    if (i_intMainError == 38)
    {
      l_strMainError = Translate("Faulty XL channel settings.");
    }
    if (i_intMainError == 39)
    {
      l_strMainError = Translate("Faulty robotic channel settings.");
    }
    if (i_intMainError == 40)
    {
      l_strMainError = Translate("PIP task busy.");
    }
    if (i_intMainError == 41)
    {
      l_strMainError = Translate("Auto load task busy.");
    }
    if (i_intMainError == 42)
    {
      l_strMainError = Translate("Miscellaneous task busy.");
    }
    if (i_intMainError == 43)
    {
      l_strMainError = Translate("Incubator task busy.");
    }
    if (i_intMainError == 44)
    {
      l_strMainError = Translate("Washer task busy.");
    }
    if (i_intMainError == 45)
    {
      l_strMainError = Translate("iSWAP task busy.");
    }
    if (i_intMainError == 46)
    {
      l_strMainError = Translate("CoRe 96 head task busy.");
    }
    if (i_intMainError == 47)
    {
      l_strMainError = Translate("Carrier sensor doesn't work properly.");
    }
    if (i_intMainError == 48)
    {
      l_strMainError = Translate("CoRe 384 head task busy.");
    }
    if (i_intMainError == 49)
    {
      l_strMainError = Translate("Nano pipettor task busy.");
    }
    if (i_intMainError == 50)
    {
      l_strMainError = Translate("XL channel task busy.");
    }
    if (i_intMainError == 51)
    {
      l_strMainError = Translate("Tube gripper task busy.");
    }
    if (i_intMainError == 52)
    {
      l_strMainError = Translate("Imaging channel task busy.");
    }
    if (i_intMainError == 53)
    {
      l_strMainError = Translate("Robotic channel task busy.");
    }
    if (i_intMainError == 99)
    {
      l_strMainError = Translate("Slave Error. This error code indicates an error in one of the slaves.");
    }
    if (i_intMainError == 102)
    {
      l_strMainError = Translate("Liquid Level Error. Liquid surface not detected.");
    }
    if (i_intMainError == 104)
    {
      l_strMainError = Translate("Not Aspirated Error. Dispense volume exceeds the aspirated volume.");
    }
    if (i_intMainError == 105)
    {
      l_strMainError = Translate("Improper Dispensation Error. The dispensed volume is out of tolerance (may only occur for Nano Pipettor Dispense steps).");
    }
    if (i_intSlaveError == 0)
    {
      l_strSlaveError = Translate("No slave error.");
    }
    if (i_intSlaveError == 21)
    {
      l_strSlaveError = Translate("No I²C Bus or EEPROM not working. Transfer check error. No communication to EEPROM.");
    }
    if (i_intSlaveError == 25)
    {
      l_strSlaveError = Translate("Download error - Flash EPROM data are wrong. Intel hex row wrong or wrong hex character.");
    }
    if (i_intSlaveError == 26)
    {
      l_strSlaveError = Translate("Download error - Flash EPROM cannot be programmed. Flash EPROM not working.");
    }
    if (i_intSlaveError == 27)
    {
      l_strSlaveError = Translate("Download error - Flash EPROM cannot be erased. Flash EPROM not working.");
    }
    if (i_intSlaveError == 28)
    {
      l_strSlaveError = Translate("Download error - Flash EPROM check sum error. Check sums stored in Flash EPROM do not match those calculated.");
    }
    if (i_intSlaveError == 30)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined command.");
    }
    if (i_intSlaveError == 31)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined parameter.");
    }
    if (i_intSlaveError == 32)
    {
      l_strSlaveError = Translate("Syntax check error. Parameter out of range.");
    }
    if (i_intSlaveError == 35)
    {
      l_strSlaveError = Translate("General error during execution of commands. Voltages outside permitted range.");
    }
    if (i_intSlaveError == 36)
    {
      l_strSlaveError = Translate("General error during execution of commands. Stop during execution of a command.");
    }
    if (i_intSlaveError == 37)
    {
      l_strSlaveError = Translate("General error during execution of commands. The adjustment sensor did not switch. The drive drived to maximal / minimal position without detecting the adjustment sensor. ");
    }
    if (i_intSlaveError == 40)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process.");
    }
    if (i_intSlaveError == 50)
    {
      l_strSlaveError = Translate("Dispensing drive - Init position not found. Drive locked.");
    }
    if (i_intSlaveError == 51)
    {
      l_strSlaveError = Translate("Dispensing drive - Drive not initialized. Movement command sent before drive initialized.");
    }
    if (i_intSlaveError == 52)
    {
      l_strSlaveError = Translate("Dispensing drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 53)
    {
      l_strSlaveError = Translate("Dispensing drive - Step monitoring. Maximum volume in tip reached.");
    }
    if (i_intSlaveError == 54)
    {
      l_strSlaveError = Translate("Dispensing drive - Position monitoring. Position out of permitted area.");
    }
    if (i_intSlaveError == 55)
    {
      l_strSlaveError = Translate("Y-drive - Initialization failed. Drive blocked.");
    }
    if (i_intSlaveError == 56)
    {
      l_strSlaveError = Translate("Y-drive - drive not initialized.");
    }
    if (i_intSlaveError == 57)
    {
      l_strSlaveError = Translate("Y-drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 58)
    {
      l_strSlaveError = Translate("Y-drive - Position out of permitted area. Desired absolute position leads to an under-/ overflow of position limitation.");
    }
    if (i_intSlaveError == 60)
    {
      l_strSlaveError = Translate("Z-drive - Initialization failed. Drive blocked.");
    }
    if (i_intSlaveError == 61)
    {
      l_strSlaveError = Translate("Z-drive - drive not initialized.");
    }
    if (i_intSlaveError == 62)
    {
      l_strSlaveError = Translate("Z-drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 63)
    {
      l_strSlaveError = Translate("Z-drive - Position out of permitted area. Desired absolute position leads to an under-/ overflow of position limitation.");
    }
    if (i_intSlaveError == 65)
    {
      l_strSlaveError = Translate("Squeezer -drive - Initialization failed. Drive blocked.");
    }
    if (i_intSlaveError == 66)
    {
      l_strSlaveError = Translate("Squeezer -drive - drive not initialized.");
    }
    if (i_intSlaveError == 67)
    {
      l_strSlaveError = Translate("Squeezer -drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 68)
    {
      l_strSlaveError = Translate("Squeezer -drive -  Position out of permitted area. Desired absolute position leads to an under-/ overflow of position limitation.");
    }
    if (i_intSlaveError == 70)
    {
      l_strSlaveError = Translate("Liquid level detection - No liquid level found.");
    }
    if (i_intSlaveError == 71)
    {
      l_strSlaveError = Translate("Liquid level detection - Not enough liquid present.");
    }
    if (i_intSlaveError == 75)
    {
      l_strSlaveError = Translate("Tip handling - No tip picked up. Tip was not picked up.");
    }
    if (i_intSlaveError == 76)
    {
      l_strSlaveError = Translate("Tip handling - Tip already picked up. A fresh tip cannot be picked up because one is already present.");
    }
    if (i_intSlaveError == 81)
    {
      l_strSlaveError = Translate("Liquid handling - Clot detected.");
    }
    if (i_intSlaveError == 82)
    {
      l_strSlaveError = Translate("Liquid handling - TADM measurement out of lower limit curve.");
    }
    if (i_intSlaveError == 83)
    {
      l_strSlaveError = Translate("Liquid handling - TADM measurement out of upper limit curve.");
    }
    if (i_intSlaveError == 84)
    {
      l_strSlaveError = Translate("Liquid handling - Not enough memory for TADM measurement.");
    }
    if (i_intSlaveError == 90)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve not resetable.");
    }
    if (i_intSlaveError == 91)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve not programable.");
    }
    if (i_intSlaveError == 92)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve name not found.");
    }
    if (i_intSlaveError == 93)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve data incorrect.");
    }
    if (i_intSlaveError == 94)
    {
      l_strSlaveError = Translate("TADM limit curve - not enough memory for limit curve.");
    }
    if (i_intSlaveError == 95)
    {
      l_strSlaveError = Translate("TADM limit curve - not allowed limit curve index.");
    }
    if (i_intSlaveError == 96)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve already stored.");
    }
    if (i_intErrorRecovery == 0)
    {
      l_strErrorRecovery = Translate("No recovery.");
    }
    if (i_intErrorRecovery == 1)
    {
      l_strErrorRecovery = Translate("Abort - Run aborted.");
    }
    if (i_intErrorRecovery == 2)
    {
      l_strErrorRecovery = Translate("Cancel - run canceled or user defined errorhandling  was executed.");
    }
    if (i_intErrorRecovery == 3)
    {
      l_strErrorRecovery = Translate("Initialize. Instrument initialized again.");
    }
    if (i_intErrorRecovery == 4)
    {
      l_strErrorRecovery = Translate("Repeat. Command repeated.");
    }
    if (i_intErrorRecovery == 5)
    {
      l_strErrorRecovery = Translate("Exclude. Channel or position excluded until next tip pick up.");
    }
    if (i_intErrorRecovery == 6)
    {
      l_strErrorRecovery = Translate("Waste. Tip ejected to the default waste.");
    }
    if (i_intErrorRecovery == 7)
    {
      l_strErrorRecovery = Translate("Air. Rest of missing volume filled up with air.");
    }
    if (i_intErrorRecovery == 8)
    {
      l_strErrorRecovery = Translate("Bottom. Aspiration repeated on container bottom.");
    }
    if (i_intErrorRecovery == 9)
    {
      l_strErrorRecovery = Translate("Continue. Run continued without any change.");
    }
    if (i_intErrorRecovery == 10)
    {
      l_strErrorRecovery = Translate("Barcode. Barcode assigned manually.");
    }
    if (i_intErrorRecovery == 11)
    {
      l_strErrorRecovery = Translate("Next. Command repeated on next sequence position.");
    }
    if (i_intErrorRecovery == 12)
    {
      l_strErrorRecovery = Translate("Available. Available volume used.");
    }
    if (l_strMainError == "unknown error")
    {
      l_strMainError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strSlaveError == "unknown error")
    {
      l_strSlaveError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strErrorRecovery == "unknown error")
    {
      l_strErrorRecovery = Translate(" error not translated by library - check log file to retrieve data");
    }
    l_strMainError = StrConcat4(l_strMainError, Translate(" - code : "), i_intMainError, Translate(""));
    l_strSlaveError = StrConcat4(l_strSlaveError, Translate(" - code : "), i_intSlaveError, Translate(""));
    l_strErrorRecovery = StrConcat4(l_strErrorRecovery, Translate(" - code : "), i_intErrorRecovery, Translate(""));
    l_intErrorValue = l_intErrorValue + i_intMainError;
    l_intErrorValue = l_intErrorValue + i_intSlaveError;
    l_intErrorValue = l_intErrorValue + i_intErrorRecovery;
    if (l_intErrorValue == 0)
    {
      o_strTranslatedPipettingInformaton = Translate("pipetting step ok.");
    }
    else
    {
      o_strTranslatedPipettingInformaton = StrConcat8(l_strMainError, Translate(" ; "), l_strSlaveError, Translate(" ; "), l_strErrorRecovery, Translate(""), Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_intMainError : "), i_intMainError);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_intSlaveError : "), i_intSlaveError);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_intErrorRecovery : "), i_intErrorRecovery);
    }
  }

  private function _DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToReport( variable i_strStepReturnValueLoadingStep ) variable {
    private variable l_intNumberOfPositions;
    private variable l_intGetErrorRecovery;
    private variable l_strCurrentTime;
    private variable l_strCurrentDate;
    private variable l_strCurrentLabIDSource;
    private variable l_intIndexNumberOfPositions;
    private variable l_intGetSlaveErrorCode;
    private variable l_strGetStepData;
    private variable l_intGetPositionFromNum;
    private variable l_intGetMainErrorCode;
    private variable l_strCurrentPosIDSource;
    private file l_hdlNGSStarReportFile2;
    private variable l_strEmptyString;
    private variable l_strTranslatedLoadingInformation;
    private variable l_strUsedTool;
    l_strCurrentDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    l_strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    l_strUsedTool = Translate("used tool : Autoload.");
    l_strEmptyString = Translate("");
    onerror goto errLabel_7 ;
    err.Clear();
    l_hdlNGSStarReportFile2.AddField("Date", l_strCurrentDate, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Time", l_strCurrentTime, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Source", l_strCurrentLabIDSource, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Source", l_intGetPositionFromNum, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transfer Volume", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("LabID Target", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("PosID Target", l_strEmptyString, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Barcode", l_strGetStepData, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Transport information", l_strTranslatedLoadingInformation, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Aspiration information", l_strUsedTool, hslString, 255);
    l_hdlNGSStarReportFile2.AddField("Dispense information", l_strEmptyString, hslString, 255);
    if( 0 == l_hdlNGSStarReportFile2.Open(t_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
    }
    errLabel_7 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      _DATA_IntegratedAbortHandler(Translate("Pipetting_Controller.smt "), Translate("_DATA_AnalyzeStepReturnValueOfAutoLoadStepAndWriteToNGSStarReport."));
      return (ASWGLOBAL::BOOL::FALSE);
    }   /* end if from skip handler if no error */
    l_intNumberOfPositions = StepReturn::GetNumberOfPositions(i_strStepReturnValueLoadingStep);
    {
      for(l_intIndexNumberOfPositions = 0; l_intIndexNumberOfPositions < l_intNumberOfPositions;)
      {
        l_intIndexNumberOfPositions = l_intIndexNumberOfPositions + 1;
        l_intGetPositionFromNum = StepReturn::GetPositionFromNum(l_intIndexNumberOfPositions, i_strStepReturnValueLoadingStep);
        l_strCurrentLabIDSource = StepReturn::GetLabwareId(l_intGetPositionFromNum, i_strStepReturnValueLoadingStep);
        l_strCurrentPosIDSource = StepReturn::GetPositionId(l_intGetPositionFromNum, i_strStepReturnValueLoadingStep);
        l_strGetStepData = StepReturn::GetStepData(l_intGetPositionFromNum, i_strStepReturnValueLoadingStep);
        if (l_strGetStepData != "")
        {
          l_intGetMainErrorCode = StepReturn::GetMainError(l_intGetPositionFromNum, i_strStepReturnValueLoadingStep);
          l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intGetPositionFromNum, i_strStepReturnValueLoadingStep);
          l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intGetPositionFromNum, i_strStepReturnValueLoadingStep);
          _DATA_TranslateIDLErrorCodes(l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedLoadingInformation);
          if( 0 == l_hdlNGSStarReportFile2.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
    }
    if( 0 != l_hdlNGSStarReportFile2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlNGSStarReportFile2.RemoveFields();
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_TranslateIDLErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedIDLInformaton ) void {
    private variable l_strMainError;
    private variable l_intErrorValue;
    private variable l_strErrorRecovery;
    private variable l_strSlaveError;
    o_strTranslatedIDLInformaton = 0;
    l_intErrorValue = 0;
    l_strMainError = Translate("unknown error");
    l_strSlaveError = Translate("unknown error");
    l_strErrorRecovery = Translate("unknown error");
    if (i_intMainError == 0)
    {
      l_strMainError = Translate("No main error.");
    }
    if (i_intMainError == 1)
    {
      l_strMainError = Translate("Syntax error.");
    }
    if (i_intMainError == 2)
    {
      l_strMainError = Translate("Hardware error. Drive blocked, low power etc.");
    }
    if (i_intMainError == 3)
    {
      l_strMainError = Translate("Not Executed Error. There was an error in previous part command.");
    }
    if (i_intMainError == 4)
    {
      l_strMainError = Translate("Clot Error. Tip blocked.");
    }
    if (i_intMainError == 5)
    {
      l_strMainError = Translate("Barcode unreadable. Bad or missing barcode.");
    }
    if (i_intMainError == 6)
    {
      l_strMainError = Translate("Insufficient Liquid Error. Not enough liquid available.");
    }
    if (i_intMainError == 7)
    {
      l_strMainError = Translate("Tip already fitted. Repeated attempts to fit a tip or iSwap movement with tips.");
    }
    if (i_intMainError == 8)
    {
      l_strMainError = Translate("No Tip. Command was started without fitting tip. Tip was not fitted or fell off again.");
    }
    if (i_intMainError == 9)
    {
      l_strMainError = Translate("No Carrier. Load command without carrier performed.");
    }
    if (i_intMainError == 10)
    {
      l_strMainError = Translate("Not completed. Command in command buffer was aborted due to an error in a previous command, or command stack was deleted.");
    }
    if (i_intMainError == 11)
    {
      l_strMainError = Translate("Pressure LLD Error. A dispense with pressure liquid level detection is not allowed.");
    }
    if (i_intMainError == 12)
    {
      l_strMainError = Translate("No teach signal. X-Movement to LLD reached maximum allowable position without detecting teach signal.");
    }
    if (i_intMainError == 13)
    {
      l_strMainError = Translate("Loading tray error. Position already occupied.");
    }
    if (i_intMainError == 14)
    {
      l_strMainError = Translate("Pressure LLD Error. Pressure liquid level detection in a consecutive aspiration is not allowed.");
    }
    if (i_intMainError == 15)
    {
      l_strMainError = Translate("Not allowed parameter combination. I.e. pLLD and dispense or wrong X-drive assignment.");
    }
    if (i_intMainError == 16)
    {
      l_strMainError = Translate("Cover close error. Cover is not closed and couldn't be locked.");
    }
    if (i_intMainError == 17)
    {
      l_strMainError = Translate("Improper Aspiration or Dispense Error. The pressure-based aspiration / dispensation control reported an error ( not enough liquid ).");
    }
    if (i_intMainError == 18)
    {
      l_strMainError = Translate("Wash fluid or waste error. Missing wash fluid OR waste of particular washer is full.");
    }
    if (i_intMainError == 19)
    {
      l_strMainError = Translate("Incubation error. Incubator temperature out of limit.");
    }
    if (i_intMainError == 20)
    {
      l_strMainError = Translate("TADM overshot. Overshot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 21)
    {
      l_strMainError = Translate("No element. Expected element not detected.");
    }
    if (i_intMainError == 22)
    {
      l_strMainError = Translate("Element still holding. Get command is sent twice or element is not discarded.");
    }
    if (i_intMainError == 23)
    {
      l_strMainError = Translate("Element lost. Expected element is missing or lost.");
    }
    if (i_intMainError == 24)
    {
      l_strMainError = Translate("Illegal target plate position. Over or underflow of iSWAP positions OR iSWAP is not in park position during pipetting activities.");
    }
    if (i_intMainError == 25)
    {
      l_strMainError = Translate("Illegal user access. Carrier was manually removed or cover is open (immediate stop is executed).");
    }
    if (i_intMainError == 26)
    {
      l_strMainError = Translate("TADM undershot. Undershot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 27)
    {
      l_strMainError = Translate("Position Error. The position is out of range.");
    }
    if (i_intMainError == 28)
    {
      l_strMainError = Translate("Unexpected cLLD Error. The cLLD detected a liquid level above start height of liquid level search.");
    }
    if (i_intMainError == 29)
    {
      l_strMainError = Translate("Area already occupied. Its impossible to occupy area because this area is already in use.");
    }
    if (i_intMainError == 30)
    {
      l_strMainError = Translate("Impossible to occupy area. Area can't be occupied because is no solution for arm prepositioning.");
    }
    if (i_intMainError == 31)
    {
      l_strMainError = Translate("Anti drop control error. Anti drop controlling out of tolerance.");
    }
    if (i_intMainError == 32)
    {
      l_strMainError = Translate("Parameter out of range.");
    }
    if (i_intMainError == 33)
    {
      l_strMainError = Translate("Parameter does not belong to command, or not all parameters were sent.");
    }
    if (i_intMainError == 34)
    {
      l_strMainError = Translate("Node name unknown.");
    }
    if (i_intMainError == 35)
    {
      l_strMainError = Translate("ID parameter error.");
    }
    if (i_intMainError == 37)
    {
      l_strMainError = Translate("Node name defined twice.");
    }
    if (i_intMainError == 38)
    {
      l_strMainError = Translate("Faulty XL channel settings.");
    }
    if (i_intMainError == 39)
    {
      l_strMainError = Translate("Faulty robotic channel settings.");
    }
    if (i_intMainError == 40)
    {
      l_strMainError = Translate("PIP task busy.");
    }
    if (i_intMainError == 41)
    {
      l_strMainError = Translate("Auto load task busy.");
    }
    if (i_intMainError == 42)
    {
      l_strMainError = Translate("Miscellaneous task busy.");
    }
    if (i_intMainError == 43)
    {
      l_strMainError = Translate("Incubator task busy.");
    }
    if (i_intMainError == 44)
    {
      l_strMainError = Translate("Washer task busy.");
    }
    if (i_intMainError == 45)
    {
      l_strMainError = Translate("iSWAP task busy.");
    }
    if (i_intMainError == 46)
    {
      l_strMainError = Translate("CoRe 96 head task busy.");
    }
    if (i_intMainError == 47)
    {
      l_strMainError = Translate("Carrier sensor doesn't work properly.");
    }
    if (i_intMainError == 48)
    {
      l_strMainError = Translate("CoRe 384 head task busy.");
    }
    if (i_intMainError == 49)
    {
      l_strMainError = Translate("Nano pipettor task busy.");
    }
    if (i_intMainError == 50)
    {
      l_strMainError = Translate("XL channel task busy.");
    }
    if (i_intMainError == 51)
    {
      l_strMainError = Translate("Tube gripper task busy.");
    }
    if (i_intMainError == 52)
    {
      l_strMainError = Translate("Imaging channel task busy.");
    }
    if (i_intMainError == 53)
    {
      l_strMainError = Translate("Robotic channel task busy.");
    }
    if (i_intMainError == 99)
    {
      l_strMainError = Translate("Slave Error. This error code indicates an error in one of the slaves.");
    }
    if (i_intMainError == 102)
    {
      l_strMainError = Translate("Liquid Level Error. Liquid surface not detected.");
    }
    if (i_intMainError == 104)
    {
      l_strMainError = Translate("Not Aspirated Error. Dispense volume exceeds the aspirated volume.");
    }
    if (i_intMainError == 105)
    {
      l_strMainError = Translate("Improper Dispensation Error. The dispensed volume is out of tolerance (may only occur for Nano Pipettor Dispense steps).");
    }
    if (i_intSlaveError == 0)
    {
      l_strSlaveError = Translate("No slave error.");
    }
    if (i_intSlaveError == 20)
    {
      l_strSlaveError = Translate("No I²C Bus or EEPROM not working. Transfer check error. No communication to EEPROM.");
    }
    if (i_intSlaveError == 30)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined command.");
    }
    if (i_intSlaveError == 31)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined parameter.");
    }
    if (i_intSlaveError == 32)
    {
      l_strSlaveError = Translate("Syntax check error. Parameter out of range.");
    }
    if (i_intSlaveError == 35)
    {
      l_strSlaveError = Translate("General error during execution of commands. Voltages outside permitted range.");
    }
    if (i_intSlaveError == 36)
    {
      l_strSlaveError = Translate("General error during execution of commands. Stop during execution of a command.");
    }
    if (i_intSlaveError == 40)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process.");
    }
    if (i_intSlaveError == 50)
    {
      l_strSlaveError = Translate("Scanner X drive - Init position not found.");
    }
    if (i_intSlaveError == 51)
    {
      l_strSlaveError = Translate("Scanner X drive - Stepper motor not initialized. Command sent before motor initialized.");
    }
    if (i_intSlaveError == 52)
    {
      l_strSlaveError = Translate("Scanner X drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 55)
    {
      l_strSlaveError = Translate("Scanner rotation drive - drive blocked.");
    }
    if (i_intSlaveError == 60)
    {
      l_strSlaveError = Translate("Carrier Y drive - Init position not found. Hardware not working.");
    }
    if (i_intSlaveError == 61)
    {
      l_strSlaveError = Translate("Carrier Y drive - drive not initialized.");
    }
    if (i_intSlaveError == 62)
    {
      l_strSlaveError = Translate("Carrier Y drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 65)
    {
      l_strSlaveError = Translate("Carrier Z drive - Init position not found. Hardware not working.");
    }
    if (i_intSlaveError == 66)
    {
      l_strSlaveError = Translate("Carrier Z drive - drive not initialized.");
    }
    if (i_intSlaveError == 67)
    {
      l_strSlaveError = Translate("Carrier Z drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 70)
    {
      l_strSlaveError = Translate("Barcode scanner - Communication error. Hardware not working, scanner dysfunction.");
    }
    if (i_intSlaveError == 75)
    {
      l_strSlaveError = Translate("Loading indicator LED - Communication error to loading indicator. Communication to LEDs not working.");
    }
    if (i_intSlaveError == 80)
    {
      l_strSlaveError = Translate("Carrier handling - Identification barcode not readable. Missing or unreadable identification barcode or wrong barcode type definition.");
    }
    if (i_intSlaveError == 81)
    {
      l_strSlaveError = Translate("Carrier handling - No carrier present. Carrier missing or sensor not working.");
    }
    if (i_intSlaveError == 82)
    {
      l_strSlaveError = Translate("Carrier handling - No carrier loaded. Load or unload command without identification of carrier.");
    }
    if (i_intSlaveError == 83)
    {
      l_strSlaveError = Translate("Carrier handling - Loading tray is occupied. At unloading carrier detected on loading tray.");
    }
    if (i_intSlaveError == 84)
    {
      l_strSlaveError = Translate("Carrier handling - Data for free definable carrier not correct. Indices not in ascending order OR positions not in ascending order OR gab between barcode reading area to low.");
    }
    if (i_intErrorRecovery == 0)
    {
      l_strErrorRecovery = Translate("No recovery.");
    }
    if (i_intErrorRecovery == 1)
    {
      l_strErrorRecovery = Translate("Abort - Run aborted.");
    }
    if (i_intErrorRecovery == 2)
    {
      l_strErrorRecovery = Translate("Cancel - run canceled or user defined errorhandling  was executed.");
    }
    if (i_intErrorRecovery == 3)
    {
      l_strErrorRecovery = Translate("Initialize. Instrument initialized again.");
    }
    if (i_intErrorRecovery == 4)
    {
      l_strErrorRecovery = Translate("Repeat. Command repeated.");
    }
    if (i_intErrorRecovery == 5)
    {
      l_strErrorRecovery = Translate("Exclude. Channel or position excluded until next tip pick up.");
    }
    if (i_intErrorRecovery == 6)
    {
      l_strErrorRecovery = Translate("Waste. Tip ejected to the default waste.");
    }
    if (i_intErrorRecovery == 7)
    {
      l_strErrorRecovery = Translate("Air. Rest of missing volume filled up with air.");
    }
    if (i_intErrorRecovery == 8)
    {
      l_strErrorRecovery = Translate("Bottom. Aspiration repeated on container bottom.");
    }
    if (i_intErrorRecovery == 9)
    {
      l_strErrorRecovery = Translate("Continue. Run continued without any change.");
    }
    if (i_intErrorRecovery == 10)
    {
      l_strErrorRecovery = Translate("Barcode. Barcode assigned manually.");
    }
    if (i_intErrorRecovery == 11)
    {
      l_strErrorRecovery = Translate("Next. Command repeated on next sequence position.");
    }
    if (i_intErrorRecovery == 12)
    {
      l_strErrorRecovery = Translate("Available. Available volume used.");
    }
    if (l_strMainError == "unknown error")
    {
      l_strMainError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strSlaveError == "unknown error")
    {
      l_strSlaveError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strErrorRecovery == "unknown error")
    {
      l_strErrorRecovery = Translate(" error not translated by library - check log file to retrieve data");
    }
    l_strMainError = StrConcat4(l_strMainError, Translate(" - code : "), i_intMainError, Translate(""));
    l_strSlaveError = StrConcat4(l_strSlaveError, Translate(" - code : "), i_intSlaveError, Translate(""));
    l_strErrorRecovery = StrConcat4(l_strErrorRecovery, Translate(" - code : "), i_intErrorRecovery, Translate(""));
    l_intErrorValue = l_intErrorValue + i_intMainError;
    l_intErrorValue = l_intErrorValue + i_intSlaveError;
    l_intErrorValue = l_intErrorValue + i_intErrorRecovery;
    if (l_intErrorValue == 0)
    {
      o_strTranslatedIDLInformaton = Translate("loading step ok.");
    }
    else
    {
      o_strTranslatedIDLInformaton = StrConcat8(l_strMainError, Translate(" ; "), l_strSlaveError, Translate(" ; "), l_strErrorRecovery, Translate(""), Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_intMainError : "), i_intMainError);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_intSlaveError : "), i_intSlaveError);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_intErrorRecovery : "), i_intErrorRecovery);
    }
  }

  function PIP_Channels_Multidispense( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltDispenseHeightFromBottom, variable i_fltVolume, variable i_fltVolumePreAliquot, variable i_fltVolumePostAliquot, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_blnActivateMeasurementOfContainerVolume ) variable {
    private variable l_intMixCycles;
    private variable l_strStepReturnValueDispense;
    private variable l_indexChannelPatternDispense;
    private variable l_strStepReturnValueAspiration;
    private variable l_strChannelPatternAspirate;
    private variable l_loopCounterNumberOfDispenses;
    private variable l_intCurrentDispenseMode;
    private variable l_strTypeOfLabware;
    private variable l_intCurrentTipType;
    private variable l_intNumberOfSamples;
    private variable l_strCurrentDispenseMode;
    private variable l_MainLoopCounterTransferLiquids;
    private variable l_intNumberOfUsedChannels;
    private variable l_intNumberOfDispenseLoops;
    private variable l_arrChannelPatternDispense[];
    private variable l_arrVolumeAspiration[];
    private variable l_arrMixingVolumes[];
    private variable l_strVolume;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strInformationToBeUpdated;
    private variable l_strTipCounterNameIntermediate;
    private variable l_intVolumeMaxTip;
    private variable l_fltMeanvalueTransferVolume;
    private variable l_intArrayIndexCounter;
    private variable l_blnPerformedAdditionalVolumeTransfer;
    private variable l_strComment;
    private variable l_blnSuccess;
    private sequence l_seqAspirationPositionPreselectedTrough;
    private variable l_fltPostAliquot;
    private variable l_fltTransferAliquot;
    private variable l_fltVolumePrePostAliquot;
    private variable l_fltVolumeTotal;
    private variable l_retValueDialog;
    private variable l_fltPreAliquot;
    private variable l_arrFltVolumeContainerInMicroliter[];
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_blnSuccess = _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strVolume = StrFStr(i_fltVolume);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents with multi dispense mode : "), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    _DATA_SetRackVisibility(i_seqAspirationPosition, ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_intMixCycles = i_intMixCycles;
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intMixCycles : "), l_intMixCycles);
      _DATA_InterpreteLabwareID(ML_STAR, i_seqAspirationPosition, l_strTypeOfLabware);
      l_intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strCurrentDispenseMode : "), l_strCurrentDispenseMode);
      l_indexChannelPatternDispense = 0;
      if (t_intNumberOfAllAvailableChannels > l_intNumberOfSamples)
      {
        l_intNumberOfUsedChannels = l_intNumberOfSamples;
      }
      else
      {
        l_intNumberOfUsedChannels = t_intNumberOfAllAvailableChannels;
      }
      if (l_strCurrentDispenseMode == "Part")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_fltVolume : "), i_fltVolume);
        MECC::TraceComment(Translate("********** Fill plate  ..........."));
        if (l_intCurrentTipType == 1)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
          l_intVolumeMaxTip = 300;
        }
        if (l_intCurrentTipType == 5)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
          l_intVolumeMaxTip = 1000;
        }
        if (l_intCurrentTipType == 23)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
          l_intVolumeMaxTip = 50;
        }
        l_fltVolumeTotal = i_fltVolumePostAliquot + i_fltVolumePostAliquot;
        l_fltVolumeTotal = l_fltVolumeTotal + i_fltVolume;
        if (l_fltVolumeTotal > l_intVolumeMaxTip)
        {
          if (i_fltVolume > l_intVolumeMaxTip)
          {
            l_retValueDialog = VectorCustomDialogs::MessageDialog(Translate("Liquid volume check"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 20, Translate("The requested transfer volume exceeds the maximum tip volume - Press OK to automatically reduce transfer volume to maximum tip volume and set Pre and Post aliquot volume = 0. CANCEL will abort pipetting routine."));
            _DATA_TranslateVectorCustomDialogsErrorCodes(l_retValueDialog);
            if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
            {
              _DATA_IntegratedAbortHandler(Translate("Pipetting_Controller.smt "), Translate("PIP_Channel_Multidispense. A check wether the given transfer aliquot volume is within the pipetting range of a special tiptype failed."));
              return (ASWGLOBAL::BOOL::FALSE);
            }
            else
            {
              MECC::TraceComment(Translate("Volume check failed - used selected to reduce transfer volume to maximum volume of selected tip tipe.\n"));
              l_fltTransferAliquot = l_intVolumeMaxTip;
              l_fltPreAliquot = 0;
              l_fltPostAliquot = 0;
            }
          }
          else
          {
            l_retValueDialog = VectorCustomDialogs::MessageDialog(Translate("Liquid volume check"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 20, Translate("The requested transfer volume plus Pre and Post volume exceeds the maximum tip volume - Press OK to automatically reduce Pre and Post aliquot volume. CANCEL will abort pipetting routine."));
            _DATA_TranslateVectorCustomDialogsErrorCodes(l_retValueDialog);
            if (l_retValueDialog == ASWGLOBAL::DIALOG::CANCEL)
            {
              _DATA_IntegratedAbortHandler(Translate("Pipetting_Controller.smt "), Translate("PIP_Channel_Multidispense. A check wether the given pre and post aliquot volume plus transfer volume is within the pipetting range of a special tiptype failed."));
              return (ASWGLOBAL::BOOL::FALSE);
            }
            else
            {
              MECC::TraceComment(Translate("Volume check failed - used selected to automatically reduce Pre and Post to allow transfer volume and match tthe maximum volume of selected tip tipe.\n"));
              l_fltTransferAliquot = i_fltVolume;
              l_fltVolumePrePostAliquot = l_intVolumeMaxTip - l_fltTransferAliquot;
              if (l_fltVolumePrePostAliquot >= 0)
              {
                l_fltPreAliquot = l_fltVolumePrePostAliquot / (2 * 1.0);
                l_fltPostAliquot = l_fltPreAliquot;
              }
              else
              {
                l_fltPreAliquot = 0;
                l_fltPostAliquot = 0;
              }
            }
          }
        }
        else
        {
          l_fltTransferAliquot = i_fltVolume;
          l_fltPreAliquot = i_fltVolumePreAliquot;
          l_fltPostAliquot = i_fltVolumePostAliquot;
        }
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate("l_fltTransferAliquot : "), l_fltTransferAliquot, Translate(", l_fltPreAliquot : "), l_fltPreAliquot, Translate(", l_fltPostAliquot : "), l_fltPostAliquot);
        l_intArrayIndexCounter = 1;
        {
          l_MainLoopCounterTransferLiquids = 0;
          while (
             (i_seqDispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seqDispensePosition, 1, i_seqAspirationPosition, 1);
            l_MainLoopCounterTransferLiquids = l_MainLoopCounterTransferLiquids + 1;
            l_arrVolumeAspiration.SetSize(0);
            l_arrMixingVolumes.SetSize(0);
            ALIQUOT_FOR_EASYSTEPS_V2::CalcAliquot_v2_1(i_seqDispensePosition, l_fltTransferAliquot, l_fltPreAliquot, l_fltPostAliquot, l_intVolumeMaxTip, l_intNumberOfDispenseLoops, t_intNumberOfAllAvailableChannels, 8, l_arrVolumeAspiration, l_arrMixingVolumes, l_arrChannelPatternDispense, l_strChannelPatternAspirate);
            TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arrVolumeAspiration "), l_arrVolumeAspiration);
            if (l_MainLoopCounterTransferLiquids == 1)
            {
              l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPatternAspirate, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, i_seqDispensePosition);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
            }
            else
            {
              l_intMixCycles = 0;
            }
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strChannelPatternAspirate : "), l_strChannelPatternAspirate);
            TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
            if (i_blnActivateMeasurementOfContainerVolume == ASWGLOBAL::BOOL::TRUE)
            {
              MECC::TraceComment(Translate("i_blnActivateMeasurementOfContainerVolume = TRUE"));
              _DATA_CalculateAverageVolumeOfVolumeArray(l_arrVolumeAspiration, l_strChannelPatternAspirate, l_intArrayIndexCounter, 0, l_fltMeanvalueTransferVolume);
              l_blnSuccess = _DATA_ManageMultipleTroughs(ML_STAR, l_fltMeanvalueTransferVolume, l_fltPreAliquot, l_fltPostAliquot, i_seqAspirationPosition, i_strLiquidClassNameTransfer, l_strChannelPatternAspirate, l_blnPerformedAdditionalVolumeTransfer, l_seqAspirationPositionPreselectedTrough);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
            }
            else
            {
              l_seqAspirationPositionPreselectedTrough = HSLExtensions::Sequence::Copy(i_seqAspirationPosition, 2);
              MECC::TraceComment(Translate("i_blnActivateMeasurementOfContainerVolume = FALSE"));
              l_blnPerformedAdditionalVolumeTransfer = ASWGLOBAL::BOOL::FALSE;
            }
            if (l_blnPerformedAdditionalVolumeTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
            }
            _DATA_ComputeVolumeInLabware(ML_STAR, l_seqAspirationPositionPreselectedTrough, l_strChannelPatternAspirate, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
            t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterAspiration, l_arrFltVolumeContainerInMicroliter);
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            l_indexChannelPatternDispense = 0;
            {
              for(l_loopCounterNumberOfDispenses = 0; l_loopCounterNumberOfDispenses < l_intNumberOfDispenseLoops;)
              {
                l_loopCounterNumberOfDispenses = l_loopCounterNumberOfDispenses + 1;
                l_indexChannelPatternDispense = l_indexChannelPatternDispense + 1;
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  	l_strStepReturnValueDispense = arrRetValues[2];
                }
                l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
                if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
                {
                  return (ASWGLOBAL::BOOL::FALSE);
                }
              }
            }
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            if (
               (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
          i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
          i_seqDispensePosition.SetCurrentPosition(1);
          i_seqAspirationPosition.SetCurrentPosition(1);
        }
        l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPatternAspirate);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Dispense Mode"));
        _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported dispense mode detected."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function PIP_Channels_ComponentsIntoMasterMixTubes( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable & i_arrFltVolume[], variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense ) variable {
    private variable l_intNumberOfNeededLiquidTransfers;
    private variable l_fltVolumeOfCurrentArrayIndex;
    private variable l_fltVolumeMaximum;
    private variable l_fltCurrentTransferVolume;
    private variable l_strStepReturnValueDispense;
    private variable l_intIndexNumberOfTransfers;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_intMainLoopTransferLiquids;
    private variable l_strStepReturnValueAspiration;
    private variable l_strLabwareIDAspiration;
    private variable l_strTypeOfLabware;
    private variable l_intCurrentDispenseMode;
    private variable l_intSizeArrFltVolume;
    private variable l_intCurrentTipType;
    private variable l_intArrayIndexCounter;
    private variable l_strLabwareIDaspiration;
    private variable l_intNumberOfSamples;
    private variable l_strCurrentDispenseMode;
    private variable l_intArrFltVolumeIndex;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strLabwareIDdispense;
    private variable l_strInformationToBeUpdated;
    private variable l_intPositionIDaspiration;
    private variable l_intPositionIDdispense;
    private sequence l_seqAspirateCopy;
    private sequence l_seqDispenseCopy;
    private variable i_arrFltVolumeCopy[];
    private variable l_strChannelPattern;
    private variable l_strTipCounterNameIntermediate;
    private variable l_arrFltVolumeContainerInMicroliter[];
    private variable l_fltMeanvalueTransferVolume;
    private variable l_blnPerformedAdditionalVolumeTransfer;
    private variable l_strComment;
    private variable l_blnSuccess;
    private sequence l_seqAspirationPositionPreselectedTrough;
    private variable l_strChannelPatternTransfer;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering independent volumes per channel"), Translate(""), Translate(""));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(Translate("PIP_MasterMixComponentsIntoMasterMixTubes"), ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnSuccess = _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    _DATA_SetRackVisibility(i_seqAspirationPosition, ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      SeqRemoveAll(l_seqAspirateCopy);
      SeqRemoveAll(l_seqDispenseCopy);
      i_arrFltVolumeCopy.SetSize(0);
      l_intSizeArrFltVolume=i_arrFltVolume.GetSize();
      {
        for(l_intArrFltVolumeIndex = 0; l_intArrFltVolumeIndex < l_intSizeArrFltVolume;)
        {
          l_intArrFltVolumeIndex = l_intArrFltVolumeIndex + 1;
          l_strLabwareIDaspiration = SeqGetLabwareId(i_seqAspirationPosition);
          l_intPositionIDaspiration = SeqGetPositionId(i_seqAspirationPosition);
          l_strLabwareIDdispense = SeqGetLabwareId(i_seqDispensePosition);
          l_intPositionIDdispense = SeqGetPositionId(i_seqDispensePosition);
          l_fltVolumeOfCurrentArrayIndex=i_arrFltVolume.GetAt(l_intArrFltVolumeIndex-1);
          if (l_intCurrentTipType == 1)
          {
            l_fltVolumeMaximum = 300;
          }
          if (l_intCurrentTipType == 5)
          {
            l_fltVolumeMaximum = 1000;
          }
          if (l_intCurrentTipType == 23)
          {
            l_fltVolumeMaximum = 50;
          }
          l_intNumberOfNeededLiquidTransfers = l_fltVolumeOfCurrentArrayIndex / (l_fltVolumeMaximum * 1.0);
          l_intNumberOfNeededLiquidTransfers = MthCeiling(l_intNumberOfNeededLiquidTransfers);
          l_fltCurrentTransferVolume = l_fltVolumeOfCurrentArrayIndex / (l_intNumberOfNeededLiquidTransfers * 1.0);
          {
            for(l_intIndexNumberOfTransfers = 0; l_intIndexNumberOfTransfers < l_intNumberOfNeededLiquidTransfers;)
            {
              l_intIndexNumberOfTransfers = l_intIndexNumberOfTransfers + 1;
              i_arrFltVolumeCopy.AddAsLast(l_fltCurrentTransferVolume);
              SeqAdd(l_seqAspirateCopy, l_strLabwareIDaspiration, l_intPositionIDaspiration);
              SeqAdd(l_seqDispenseCopy, l_strLabwareIDdispense, l_intPositionIDdispense);
            }
          }
          SeqIncrement(i_seqAspirationPosition, 1);
          SeqIncrement(i_seqDispensePosition, 1);
        }
      }
      i_seqAspirationPosition.SetCurrentPosition(1);
      i_seqDispensePosition.SetCurrentPosition(1);
      l_seqAspirateCopy.SetCurrentPosition(1);
      l_seqDispenseCopy.SetCurrentPosition(1);
      l_strLabwareIDAspiration = SeqGetLabwareId(l_seqAspirateCopy);
      _DATA_InterpreteLabwareID(ML_STAR, l_seqAspirateCopy, l_strTypeOfLabware);
      l_intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqAspirationPosition);
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, l_seqAspirateCopy);
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, i_seqDispensePosition);
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, l_seqDispenseCopy);
      if (l_strCurrentDispenseMode == "Empty")
      {
        if (l_strTypeOfLabware == "trough")
        {
        }
        MECC::TraceComment(Translate("********** Now pipetting reagents to destination plate"));
        l_intArrayIndexCounter = 1;
        if (l_intCurrentTipType == 1)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
        }
        if (l_intCurrentTipType == 5)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
        }
        if (l_intCurrentTipType == 23)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
        }
        {
          l_intMainLoopTransferLiquids = 0;
          while (
             (l_seqDispenseCopy.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, l_seqAspirateCopy, 1, l_seqDispenseCopy, 1);
            l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
            if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              l_strChannelPattern = Translate("");
              l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPattern, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, l_seqDispenseCopy);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
            }
            else
            {
              if (l_intMainLoopTransferLiquids == 1)
              {
                l_strChannelPattern = Translate("");
                l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPattern, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, l_seqDispenseCopy);
                if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
                {
                  return (ASWGLOBAL::BOOL::FALSE);
                }
              }
            }
            _DATA_CheckChannelPattern(l_strChannelPattern, i_seqDispensePosition, l_strChannelPatternTransfer);
            if (i_fltAspirateHeightFromBottom == 0)
            {
              _DATA_CalculateAverageVolumeOfVolumeArray(i_arrFltVolume, l_strChannelPatternTransfer, l_intArrayIndexCounter, 0, l_fltMeanvalueTransferVolume);
              l_blnSuccess = _DATA_ManageMultipleTroughs(ML_STAR, l_fltMeanvalueTransferVolume, 0, 0, l_seqAspirateCopy, i_strLiquidClassNameTransfer, l_strChannelPatternTransfer, l_blnPerformedAdditionalVolumeTransfer, l_seqAspirationPositionPreselectedTrough);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
              if (l_blnPerformedAdditionalVolumeTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              _DATA_ComputeVolumeInLabware(ML_STAR, l_seqAspirationPositionPreselectedTrough, l_strChannelPatternTransfer, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
              t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterAspiration, l_arrFltVolumeContainerInMicroliter);
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
            }
            if (i_fltDispenseHeightFromBottom == 0)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_ComputeVolumeInLabware(ML_STAR, l_seqDispenseCopy, l_strChannelPatternTransfer, l_strStepReturnValueDispense, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
              t_arrFltVolumeContainerInMicroliterDispense = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterDispense, l_arrFltVolumeContainerInMicroliter);
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
            }
            l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPattern);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
            }
            if (i_blnIncrementAspirationSequence == ASWGLOBAL::BOOL::TRUE)
            {
              SeqIncrement(l_seqAspirateCopy, t_intNumberOfAllAvailableChannels);
            }
            SeqIncrement(l_seqDispenseCopy, t_intNumberOfAllAvailableChannels);
            l_intArrayIndexCounter = l_intArrayIndexCounter + t_intNumberOfAllAvailableChannels;
            if (
               (l_seqDispenseCopy.GetCurrentPosition() > 0 && l_seqDispenseCopy.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          l_seqAspirateCopy.SetMax(l_seqAspirateCopy.GetTotal());
          l_seqDispenseCopy.SetMax(l_seqDispenseCopy.GetTotal());
          l_seqAspirateCopy.SetCurrentPosition(1);
          l_seqDispenseCopy.SetCurrentPosition(1);
        }
        if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
        {
          l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPattern);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
      }
      if (l_strCurrentDispenseMode == "Part")
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Dispense Mode"));
        _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported dispense mode detected."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_Channels( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_intPrewetCycles ) variable {
    private variable l_strVolume;
    private variable l_blnStringDispenseModeSurfaceEmpty;
    private variable l_strStepReturnValueDispense;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_intMainLoopTransferLiquids;
    private variable l_strStepReturnValueAspiration;
    private variable l_strChannelPattern;
    private variable l_intMixCycleAspiration;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_strTypeOfLabware;
    private variable l_intCurrentDispenseMode;
    private variable l_intCurrentTipType;
    private variable l_intMixCycleDispense;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    private variable l_intNumberOfSamples;
    private variable l_strCurrentDispenseMode;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strTipCounterNameIntermediate;
    private variable l_arrFltVolumeContainerInMicroliter[];
    private variable l_blnPerformedAdditionalVolumeTransfer;
    private variable l_strComment;
    private variable l_blnSuccess;
    private sequence l_seqAspirationPositionPreselectedTrough;
    private variable l_strChannelPatternTransfer;
    private variable l_fltVolumeMixAspiration;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strVolume = StrFStr(i_fltVolume);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_fltVolume : "), i_fltVolume);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    _DATA_SetRackVisibility(i_seqAspirationPosition, ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_blnStringDispenseModeSurfaceEmpty = StrFind(i_strLiquidClassNameTransfer, Translate("SurfaceEmpty"));
      l_blnSuccess = _DATA_PlausibilityCheckVolume(i_fltVolume, l_intCurrentTipType);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      _DATA_InterpreteLabwareID(ML_STAR, i_seqAspirationPosition, l_strTypeOfLabware);
      l_intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        l_blnSuccess = _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
        MECC::TraceComment(Translate("********** Now pipetting reagents to destination plate"));
        if (l_intCurrentTipType == 1)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
        }
        if (l_intCurrentTipType == 5)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
        }
        if (l_intCurrentTipType == 23)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
        }
        {
          l_intMainLoopTransferLiquids = 0;
          while (
             (i_seqDispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seqDispensePosition, 1, i_seqAspirationPosition, 1);
            l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
            if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              l_strChannelPattern = Translate("");
              l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPattern, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, i_seqDispensePosition);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
            }
            else
            {
              if (l_intMainLoopTransferLiquids == 1)
              {
                l_strChannelPattern = Translate("");
                l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPattern, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, i_seqDispensePosition);
                if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
                {
                  return (ASWGLOBAL::BOOL::FALSE);
                }
              }
            }
            _DATA_CheckChannelPattern(l_strChannelPattern, i_seqDispensePosition, l_strChannelPatternTransfer);
            MECC::TraceComment("Group start - Set Prewet Mixing parameter");
            if (i_intPrewetCycles > 0)
            {
              if (l_intMainLoopTransferLiquids == 1)
              {
                l_intMixCycleAspiration = i_intPrewetCycles;
                l_fltVolumeMixAspiration = i_fltVolume;
              }
            }
            else
            {
              if (i_fltVolumeMixDispense == 0)
              {
                l_intMixCycleDispense = 0;
              }
              else
              {
                l_intMixCycleDispense = i_intMixCycles;
              }
              if (i_fltVolumeMixAspiration == 0)
              {
                l_intMixCycleAspiration = 0;
              }
              else
              {
                l_intMixCycleAspiration = i_intMixCycles;
                l_fltVolumeMixAspiration = i_fltVolumeMixAspiration;
              }
            }
            if (l_intMainLoopTransferLiquids > 1)
            {
              if (i_fltVolumeMixDispense == 0)
              {
                l_intMixCycleDispense = 0;
              }
              else
              {
                l_intMixCycleDispense = i_intMixCycles;
              }
              if (i_fltVolumeMixAspiration == 0)
              {
                l_intMixCycleAspiration = 0;
              }
              else
              {
                l_intMixCycleAspiration = i_intMixCycles;
                l_fltVolumeMixAspiration = i_fltVolumeMixAspiration;
              }
            }
            MECC::TraceComment("Group end - Set Prewet Mixing parameter");
            if (i_fltAspirateHeightFromBottom == 0)
            {
              l_blnSuccess = _DATA_ManageMultipleTroughs(ML_STAR, i_fltVolume, 0, 0, i_seqAspirationPosition, i_strLiquidClassNameTransfer, l_strChannelPatternTransfer, l_blnPerformedAdditionalVolumeTransfer, l_seqAspirationPositionPreselectedTrough);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
              if (l_blnPerformedAdditionalVolumeTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              _DATA_ComputeVolumeInLabware(ML_STAR, l_seqAspirationPositionPreselectedTrough, l_strChannelPatternTransfer, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
              t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterAspiration, l_arrFltVolumeContainerInMicroliter);
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
            }
            if (i_fltDispenseHeightFromBottom == 0)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_ComputeVolumeInLabware(ML_STAR, i_seqDispensePosition, l_strChannelPatternTransfer, l_strStepReturnValueDispense, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
              t_arrFltVolumeContainerInMicroliterDispense = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterDispense, l_arrFltVolumeContainerInMicroliter);
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
            }
            l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPattern);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
            }
            if (i_blnIncrementAspirationSequence == ASWGLOBAL::BOOL::TRUE)
            {
              SeqIncrement(i_seqAspirationPosition, t_intNumberOfAllAvailableChannels);
            }
            SeqIncrement(i_seqDispensePosition, t_intNumberOfAllAvailableChannels);
            if (
               (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
          i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
          i_seqDispensePosition.SetCurrentPosition(1);
          i_seqAspirationPosition.SetCurrentPosition(1);
        }
        if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
        {
          l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPattern);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
      }
      if (l_strCurrentDispenseMode == "Part")
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Dispense Mode"));
        _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported dispense mode detected."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _PickUpTipsChannels( device & ML_STAR, variable i_strTipCounterName, variable & io_strChannelPattern, variable i_blnOptimizationMode, sequence & i_seqTemplate ) variable {
    private sequence l_seqTipsToBePickedUp;
    private variable l_intConsumedTipsPerTipType;
    private variable l_intRemainingTipsBeforeTipPickUp;
    private variable l_intFoundString;
    private variable l_intRemainingTipsAfterTipPickUp;
    private variable l_intCurrentPosition_1000;
    private variable l_intCurrentPosition_50;
    private variable l_intCurrentPosition_300;
    private variable l_intEndPosition_1000;
    private variable l_intEndPosition_300;
    private variable l_intEndPosition_50;
    private variable l_intReturnValueATML;
    private variable l_intNumberOfRemainingTip1000;
    private variable l_intNumberOfRemainingTip300;
    private variable l_intNumberOfConsumedTip50;
    private variable l_intNumberOfConsumedTip300;
    private variable l_intNumberOfConsumedTip1000;
    private variable l_intNumberOfRemainingTip50;
    private variable l_blnSuccess;
    private variable loopCounter1;
    private variable l_strMessageInsufficientTips;
    private variable l_strChannelPatternInitial;
    l_strChannelPatternInitial = io_strChannelPattern;
    if (io_strChannelPattern == "")
    {
      l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Channel_GetTipPickUpSequenceWithControlSequence(ML_STAR, i_strTipCounterName, i_seqTemplate, i_blnOptimizationMode, l_seqTipsToBePickedUp, io_strChannelPattern);
    }
    else
    {
      l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Channel_GetTipPickUpSequenceWithChannelPattern(ML_STAR, i_strTipCounterName, io_strChannelPattern, i_blnOptimizationMode, l_seqTipsToBePickedUp);
    }
    if (l_intReturnValueATML == 2001)
    {
      l_strMessageInsufficientTips = StrConcat4(Translate("Insufficient tips detected. Reload tips of type : "), Translate("\n"), i_strTipCounterName, Translate(" ."));
      VectorCustomDialogs::MessageDialog(Translate("Tip Management"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, l_strMessageInsufficientTips);
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Edit_ShowTipEditDialog(ML_STAR, i_strTipCounterName, 0, 0);
      if (l_strChannelPatternInitial == "")
      {
        l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Channel_GetTipPickUpSequenceWithControlSequence(ML_STAR, i_strTipCounterName, i_seqTemplate, i_blnOptimizationMode, l_seqTipsToBePickedUp, io_strChannelPattern);
      }
      else
      {
        l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Channel_GetTipPickUpSequenceWithChannelPattern(ML_STAR, i_strTipCounterName, io_strChannelPattern, i_blnOptimizationMode, l_seqTipsToBePickedUp);
      }
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_8 ;
          err.Clear();
          break;
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          errLabel_8 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("The front cover is still open.\n\nPlease close the cover to proceed the run."));
          }   /* end if from skip handler if no error */
        }
      }
    }
    l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetNumberOfRemainingTips(i_strTipCounterName, l_intRemainingTipsBeforeTipPickUp);
    l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetNumberOfRemainingTips(i_strTipCounterName, l_intRemainingTipsAfterTipPickUp);
    l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_intConsumedTipsPerTipType = l_intRemainingTipsBeforeTipPickUp - l_intRemainingTipsAfterTipPickUp;
    l_intFoundString = StrFind(i_strTipCounterName, Translate("Tip50"));
    if (l_intFoundString >= 0)
    {
      t_intTotalConsumedTips50 = t_intTotalConsumedTips50 + l_intConsumedTipsPerTipType;
    }
    l_intFoundString = StrFind(i_strTipCounterName, Translate("Tip300"));
    if (l_intFoundString >= 0)
    {
      t_intTotalConsumedTips300 = t_intTotalConsumedTips300 + l_intConsumedTipsPerTipType;
    }
    l_intFoundString = StrFind(i_strTipCounterName, Translate("Tip1000"));
    if (l_intFoundString >= 0)
    {
      t_intTotalConsumedTips1000 = t_intTotalConsumedTips1000 + l_intConsumedTipsPerTipType;
    }
    l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Edit_UpdateTipSequence(l_seqTipsToBePickedUp, i_strTipCounterName);
    l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetSequenceFromName(t_strTipCounterNameTip50, t_seqTips50);
    l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_intCurrentPosition_50 = t_seqTips50.GetCurrentPosition();
    l_intEndPosition_50 = t_seqTips50.GetCount();
    l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetNumberOfConsumedTips(t_strTipCounterNameTip50, l_intNumberOfConsumedTip50);
    l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetNumberOfRemainingTips(t_strTipCounterNameTip50, l_intNumberOfRemainingTip50);
    l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetSequenceFromName(t_strTipCounterNameTip300, t_seqTips300);
    l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_intCurrentPosition_300 = t_seqTips300.GetCurrentPosition();
    l_intEndPosition_300 = t_seqTips300.GetCount();
    l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetNumberOfConsumedTips(t_strTipCounterNameTip300, l_intNumberOfConsumedTip300);
    l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetNumberOfRemainingTips(t_strTipCounterNameTip300, l_intNumberOfRemainingTip300);
    l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetSequenceFromName(t_strTipCounterNameTip1000, t_seqTips1000);
    l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_intCurrentPosition_1000 = t_seqTips1000.GetCurrentPosition();
    l_intEndPosition_1000 = t_seqTips1000.GetCount();
    l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetNumberOfConsumedTips(t_strTipCounterNameTip1000, l_intNumberOfConsumedTip1000);
    l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Counter_GetNumberOfRemainingTips(t_strTipCounterNameTip1000, l_intNumberOfRemainingTip1000);
    l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    MECC::TraceComment(Translate("Current tip status reflecting ATML database : "));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("io_strChannelPattern : "), io_strChannelPattern);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("t_strTipCounterNameTip50 : "), t_strTipCounterNameTip50);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intCurrentPosition_50 : "), l_intCurrentPosition_50);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intEndPosition_50 : "), l_intEndPosition_50);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intNumberOfConsumedTip50 : "), l_intNumberOfConsumedTip50);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intNumberOfRemainingTip50 : "), l_intNumberOfRemainingTip50);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("t_strTipCounterNameTip300 : "), t_strTipCounterNameTip300);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intCurrentPosition_300 : "), l_intCurrentPosition_300);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intEndPosition_300 : "), l_intEndPosition_300);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intNumberOfConsumedTip300 : "), l_intNumberOfConsumedTip300);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intNumberOfRemainingTip300 : "), l_intNumberOfRemainingTip300);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("t_strTipCounterNameTip1000 : "), t_strTipCounterNameTip1000);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intCurrentPosition_1000 : "), l_intCurrentPosition_1000);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intEndPosition_1000 : "), l_intEndPosition_1000);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intNumberOfConsumedTip1000 : "), l_intNumberOfConsumedTip1000);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intNumberOfRemainingTip1000 : "), l_intNumberOfRemainingTip1000);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_Channels_DefragmentTipRacks( device & ML_STAR, variable i_strTipCounterName ) variable {
    private variable l_strCurrentTipCounterName;
    private variable l_intGetSizeOfArray;
    private variable l_intIndexOfCurrentTipCounterNames;
    private variable l_intReturnValueATML;
    private variable l_strComment;
    private variable l_blnSuccess;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(Translate("Defragmentation of tips"), ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (i_strTipCounterName == "")
    {
      l_intGetSizeOfArray=t_arrTipCounterNames.GetSize();
      {
        for(l_intIndexOfCurrentTipCounterNames = 0; l_intIndexOfCurrentTipCounterNames < l_intGetSizeOfArray;)
        {
          l_intIndexOfCurrentTipCounterNames = l_intIndexOfCurrentTipCounterNames + 1;
          l_strCurrentTipCounterName=t_arrTipCounterNames.GetAt(l_intIndexOfCurrentTipCounterNames-1);
          l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Channel_DefragmentTipSequence(ML_STAR, l_strCurrentTipCounterName, TIP_TOOLS::DefragmentationDirection::ColumnWise);
          l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
      }
    }
    else
    {
      l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Channel_DefragmentTipSequence(ML_STAR, i_strTipCounterName, TIP_TOOLS::DefragmentationDirection::ColumnWise);
      l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_TranslateTipManagementErrorCodes( variable i_intErrorCode ) variable {
    private variable l_strErrorCodeTranslation;
    private variable l_strMessageTipManagementLibrary;
    private variable l_intReturnValueDialog;
    TIPMANAGEMENTLIBRARY::Logging_GetErrorDescription(i_intErrorCode, l_strErrorCodeTranslation);
    if (i_intErrorCode != 1)
    {
      l_strMessageTipManagementLibrary = StrConcat4(i_intErrorCode, Translate(" - "), l_strErrorCodeTranslation, Translate(""));
      l_strMessageTipManagementLibrary = StrConcat4(l_strMessageTipManagementLibrary, Translate("\n\nCancel aborts the routine and reports the problem. Accept continues the run - please note that this may have a negative effect on subsequent commands."), Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), l_strMessageTipManagementLibrary);
      l_intReturnValueDialog = VectorCustomDialogs::MessageDialog(Translate("Tip Management Library . "), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::AcceptCancel, 800, 800, 10, l_strMessageTipManagementLibrary);
      _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
      if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::CANCEL)
      {
        if (t_activateIntegratedAbortHandler == ASWGLOBAL::BOOL::TRUE)
        {
          abort;
        }
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_TranslateVectorCustomDialogsErrorCodes( variable i_intBindReturnValue ) void {
    private variable l_blnSkipDialog;
    private variable l_strErrorMessage;
    private variable l_intBindReturnValue;
    if (i_intBindReturnValue >= ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_intBindReturnValue : "), i_intBindReturnValue);
      if (i_intBindReturnValue == ASWGLOBAL::BOOL::FALSE)
      {
        l_blnSkipDialog = ASWGLOBAL::BOOL::TRUE;
        l_strErrorMessage = Translate("Command did not end successfully ");
      }
      else
      {
        l_blnSkipDialog = ASWGLOBAL::BOOL::FALSE;
      }
      if (i_intBindReturnValue == -1)
      {
        l_strErrorMessage = Translate("Sizes of initialization arrays are inhomogeneous. Hint : Check your arrays (sizes have to be equal). ");
      }
      if (i_intBindReturnValue == -2)
      {
        l_strErrorMessage = Translate("Data range / type. Hint : Used range or range in combination with data type is invalid.");
      }
      if (i_intBindReturnValue == -5)
      {
        l_strErrorMessage = Translate("IconSet Directory. Hint : Make sure that the directory named “ASWIconSet” exists inside the directory of ASWStandardDialogs library.");
      }
      if (i_intBindReturnValue == -8)
      {
        l_strErrorMessage = Translate("Dialog has been closed through timeout. Hint : This may or may not be an error, depending on the programmer’s intention. Clicking on a dialog interrupts timer and thus does not lead to a error.");
      }
      if (i_intBindReturnValue == -9)
      {
        l_strErrorMessage = Translate("The dialog was not . Hint : Do not use shortcuts to close the dialog, use buttons from the dialog.");
      }
      if (i_intBindReturnValue == -10)
      {
        l_strErrorMessage = Translate("Library is not initialized. Hint : Initialize library before any other function is called.");
      }
      if (i_intBindReturnValue == -11)
      {
        l_strErrorMessage = Translate("Bad Parameter. Hint : See trace for more information about which parameter caused the error. Adjust the input parameter accordingly.");
      }
      if (i_intBindReturnValue == -1000)
      {
        l_strErrorMessage = Translate("A COM error has occured. Hint : Please ensure that the com library HamiltonASWGUI.Dialogs.dll is registered.");
      }
      if (i_intBindReturnValue == -1001)
      {
        l_strErrorMessage = Translate("A COM error has occured. Hint : You cannot execute more dialogs at the same time than defined in the HSL library (default is dialog at a time).");
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strErrorMessage Vector custom dialogs : "), l_strErrorMessage);
      if (l_blnSkipDialog == ASWGLOBAL::BOOL::FALSE)
      {
        l_intBindReturnValue = VectorCustomDialogs::MessageDialog(Translate("Error message of Vector Custom Dialogs. OK is trying to continue the run ignoring the error - CANCEL will abort the run"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 60, l_strErrorMessage);
        if (l_intBindReturnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
        }
      }
    }
  }

  private function _PickUpTipsMPH96Columns( device & ML_STAR, variable i_strTipCounterName, variable i_intNumberOfColumns, variable i_intMphPickUpSide ) variable {
    private variable l_intReturnValueATML;
    private variable l_strStepRecoveryDetails;
    private variable l_blnSuccess;
    private variable loopCounter1;
    private variable l_strMessageInsufficientTips;
    if (i_intMphPickUpSide == TIP_TOOLS::MphPickUpSide::TipPickUpWithBottomSideOfMph)
    {
      MECC::TraceComment(Translate("WRONG TIP PICK UP SIDE OF MPH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Wrong Tip Pick Up Side :TipPickUpWithBottomSideOfMph"));
      _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Wrong Tip Pick Up Side detected."));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (i_intMphPickUpSide == TIP_TOOLS::MphPickUpSide::TipPickUpWithTopSideOfMph)
    {
      MECC::TraceComment(Translate("WRONG TIP PICK UP SIDE OF MPH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Wrong Tip Pick Up Side TipPickUpWithTopSideOfMph"));
      _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Wrong Tip Pick Up Side detected."));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_intReturnValueATML = TIPMANAGEMENTLIBRARY::MPH96_PickUpTipsColumn(ML_STAR, i_strTipCounterName, i_intNumberOfColumns, i_intMphPickUpSide, l_strStepRecoveryDetails);
    if (l_intReturnValueATML == 2001)
    {
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Edit_ShowTipEditDialog(ML_STAR, i_strTipCounterName, 0, 0);
      l_intReturnValueATML = TIPMANAGEMENTLIBRARY::MPH96_PickUpTipsColumn(ML_STAR, i_strTipCounterName, i_intNumberOfColumns, i_intMphPickUpSide, l_strStepRecoveryDetails);
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_9 ;
          err.Clear();
          break;
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          errLabel_9 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_strMessageInsufficientTips = StrConcat4(Translate("Insufficient tips detected. Reload tips of type : "), Translate("\n"), i_strTipCounterName, Translate(" ."));
            VectorCustomDialogs::MessageDialog(Translate("Tip Management"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, l_strMessageInsufficientTips);
          }   /* end if from skip handler if no error */
        }
      }
    }
    l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_CheckSytemConnected( device & ML_STAR ) void {
    private variable l_strDeviceName;
    private variable l_strDeviceViewName;
    l_strDeviceName = DevGetInstrumentName(ML_STAR);
    l_strDeviceViewName = DevGetInstrumentViewName(ML_STAR);
    t_intPlatformType = 0;
    InstrumentTypeHelper::GetStarType(t_intPlatformType);
    TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("l_strDeviceName : "), l_strDeviceName, Translate(" - l_strDeviceViewName : "), l_strDeviceViewName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(" Platform type 0 = STARline; 1 = STARVline"), t_intPlatformType);
  }

  private function _DATA_ComputeVolumeInLabware( device & ML_STAR, sequence i_seqOfPipettingStep, variable i_strChannelPattern, variable i_strStepReturnValueOfPipettingStep, variable i_blnMPH96used, variable & o_arrFltVolumesDetectedinMicroliter[] ) void {
    private variable l_intLoopCounterAspiration;
    private variable l_fltVolumeInMicroLiters;
    private variable l_intCurrentMeasurePosition;
    private variable l_strMPHclldH12;
    private variable l_intPosCounter;
    private variable l_intFoundSubStringEr0;
    private variable l_intRecoveryCode;
    private variable l_intNumberOfPositionsToMeasure;
    private variable l_blnCLLDDetectionPossible;
    private variable l_intFoundSubStringEr00;
    private variable l_intLiquidLevel;
    private variable l_intVolumeInMicroliters;
    private variable l_intCurrentPosition;
    private variable l_strErrorMessage;
    private variable l_strStepReturnLiquidLevel;
    private variable l_strStepReturnFWCommand;
    private variable l_strCurrentCharacter;
    private variable l_fltLiquidLevel;
    private variable l_strLabwareId;
    private variable l_intLoopCounter;
    private variable l_strLabwareID;
    private variable l_intEndPositionOfAspirationSequence;
    private variable l_intMainErrorAspirate;
    private variable l_strLabwarePositionId;
    private variable l_strMPHclldA1;
    private variable l_fltVolume;
    private variable o_arrIntMainErrorCode[];
    private variable l_arrFltHeightDetectedInMillimeter[];
    private variable l_arrLabwareIDs[];
    private variable l_arrStrChannelPattern[];
    private variable l_fltZCoord;
    private variable l_fltYCoord;
    private variable l_fltXCoord;
    private variable l_fltAngleCoord;
    o_arrFltVolumesDetectedinMicroliter.SetSize( 0);
    l_arrStrChannelPattern.SetSize(0);
    l_arrFltHeightDetectedInMillimeter.SetSize(0);
    l_intCurrentPosition = i_seqOfPipettingStep.GetCurrentPosition();
    SeqGetLabwareIds(i_seqOfPipettingStep, l_arrLabwareIDs);
    l_strLabwareID = SeqGetLabwareId(i_seqOfPipettingStep);
    if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
    {
      DevGetLabwarePosition(ML_STAR, l_strLabwareID, l_fltXCoord, l_fltYCoord, l_fltZCoord, l_fltAngleCoord);
      l_fltLiquidLevel = l_fltZCoord + 30;
    }
    l_intNumberOfPositionsToMeasure = StrReplace(i_strChannelPattern, Translate("1"), Translate("1"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_intNumberOfPositionsToMeasure : "), l_intNumberOfPositionsToMeasure);
    if (l_intNumberOfPositionsToMeasure == 0)
    {
      return;
    }
    if (i_blnMPH96used == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfPositionsToMeasure = 1;
      l_strMPHclldA1 = StrMid(i_strChannelPattern, 0, 1);
      l_strMPHclldH12 = StrMid(i_strChannelPattern, 95, 1);
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("Tip is picked up at  A1 using MPH : "), l_strMPHclldA1, Translate("; Tip is picked up at  H12 using MPH : "), l_strMPHclldH12);
      l_blnCLLDDetectionPossible = ASWGLOBAL::BOOL::FALSE;
      if (l_strMPHclldA1 == "1")
      {
        l_blnCLLDDetectionPossible = ASWGLOBAL::BOOL::TRUE;
      }
      if (l_strMPHclldH12 == "1")
      {
        l_blnCLLDDetectionPossible = ASWGLOBAL::BOOL::TRUE;
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_blnCLLDDetectionPossible "), l_blnCLLDDetectionPossible);
      if (l_blnCLLDDetectionPossible == ASWGLOBAL::BOOL::TRUE)
      {
        l_arrStrChannelPattern.AddAsLast(Translate("1"));
        TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_DEBUG, Translate("l_arrStrChannelPattern : "), l_arrStrChannelPattern);
        if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
        {
          if (t_intPlatformType == 0)
          {
            l_strStepReturnFWCommand = Translate("H0RHer00rh54298");
          }
          if (t_intPlatformType == 1)
          {
            l_strStepReturnFWCommand = Translate("A1H0RHer00rh54298");
          }
        }
        else
        {
          onerror goto errLabel_10 ;
          err.Clear();
          if (t_intPlatformType == 0)
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
              	l_strStepReturnFWCommand = arrRetValues[3];
            }
          }
          if (t_intPlatformType == 1)
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
              	l_strStepReturnFWCommand = arrRetValues[3];
            }
          }
          errLabel_10 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Function error. Returned without effect."), Translate("Error occured function compute volume affecetd."));
            return;
          }   /* end if from skip handler if no error */
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_strStepReturnFWCommand : "), l_strStepReturnFWCommand);
        l_intFoundSubStringEr0 = StrFind(l_strStepReturnFWCommand, Translate("er0"));
        l_intFoundSubStringEr00 = StrFind(l_strStepReturnFWCommand, Translate("er00"));
        if (l_intFoundSubStringEr00 == -1)
        {
          if (l_intFoundSubStringEr0 == -1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Function error. Firmware returned an error."), Translate("Error occured function compute volume affecetd."));
            return;
          }
          else
          {
            if (t_intPlatformType == 0)
            {
              StrReplace(l_strStepReturnFWCommand, Translate("H0RHer00rh"), Translate(""));
            }
            if (t_intPlatformType == 1)
            {
              StrReplace(l_strStepReturnFWCommand, Translate("A1H0RHer00rh"), Translate(""));
            }
            l_intLiquidLevel = StrIVal(l_strStepReturnFWCommand);
            l_fltLiquidLevel = l_intLiquidLevel * 0.005;
          }
        }
        else
        {
          if (t_intPlatformType == 0)
          {
            StrReplace(l_strStepReturnFWCommand, Translate("H0RHer00rh"), Translate(""));
          }
          if (t_intPlatformType == 1)
          {
            StrReplace(l_strStepReturnFWCommand, Translate("A1H0RHer00rh"), Translate(""));
          }
          l_intLiquidLevel = StrIVal(l_strStepReturnFWCommand);
          l_fltLiquidLevel = l_intLiquidLevel * 0.005;
        }
      }
      else
      {
        l_arrStrChannelPattern.AddAsLast(Translate("0"));
      }
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
        	l_strStepReturnLiquidLevel = arrRetValues[2];
      }
    }
    if (i_blnMPH96used == ASWGLOBAL::BOOL::FALSE)
    {
      l_intPosCounter = 0;
      {
        for(l_intLoopCounter = 0; l_intLoopCounter < l_intNumberOfPositionsToMeasure;)
        {
          l_intLoopCounter = l_intLoopCounter + 1;
          l_strCurrentCharacter = StrMid(i_strChannelPattern, l_intPosCounter, 1);
          l_intPosCounter = l_intPosCounter + 1;
          l_arrStrChannelPattern.AddAsLast(l_strCurrentCharacter);
        }
      }
    }
    {
      for(l_intLoopCounterAspiration = 0; l_intLoopCounterAspiration < l_intNumberOfPositionsToMeasure;)
      {
        l_intLoopCounterAspiration = l_intLoopCounterAspiration + 1;
        if (i_blnMPH96used == ASWGLOBAL::BOOL::TRUE)
        {
          if (l_intLoopCounterAspiration == 1)
          {
            l_intMainErrorAspirate = StepReturn::GetMainError(l_intLoopCounterAspiration, i_strStepReturnValueOfPipettingStep);
            l_intRecoveryCode = StepReturn::GetRecoveryButton(l_intLoopCounterAspiration, i_strStepReturnValueOfPipettingStep);
          }
        }
        else
        {
          l_intMainErrorAspirate = StepReturn::GetMainError(l_intLoopCounterAspiration, i_strStepReturnValueOfPipettingStep);
          l_intRecoveryCode = StepReturn::GetRecoveryButton(l_intLoopCounterAspiration, i_strStepReturnValueOfPipettingStep);
        }
        if (l_arrStrChannelPattern.ElementAt( l_intLoopCounterAspiration -1) == "1")
        {
          o_arrIntMainErrorCode.AddAsLast(l_intMainErrorAspirate);
          if (l_intRecoveryCode == 4)
          {
            l_intMainErrorAspirate = 0;
          }
          if (l_intMainErrorAspirate == 0)
          {
            if (i_blnMPH96used == ASWGLOBAL::BOOL::TRUE)
            {
              if (t_intPlatformType == 0)
              {
                StrReplace(l_strStepReturnFWCommand, Translate("H0RHer00rh"), Translate(""));
              }
              if (t_intPlatformType == 1)
              {
                StrReplace(l_strStepReturnFWCommand, Translate("A1H0RHer00rh"), Translate(""));
              }
              l_intLiquidLevel = StrIVal(l_strStepReturnFWCommand);
              l_fltLiquidLevel = l_intLiquidLevel * 0.005;
            }
            if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
            {
              l_fltLiquidLevel = l_fltLiquidLevel + 1;
            }
            else
            {
              if (i_blnMPH96used != ASWGLOBAL::BOOL::TRUE)
              {
                l_fltLiquidLevel = StepReturn::GetLastLiquidLevel(l_intLoopCounterAspiration, l_strStepReturnLiquidLevel);
              }
            }
            l_fltVolume = 0;
            l_intCurrentMeasurePosition = l_intCurrentPosition + l_intLoopCounterAspiration;
            l_intCurrentMeasurePosition = l_intCurrentMeasurePosition - 1;
            if (i_blnMPH96used == ASWGLOBAL::BOOL::TRUE)
            {
              if (l_strMPHclldA1 == "1")
              {
                i_seqOfPipettingStep.SetCurrentPosition(l_intCurrentMeasurePosition);
              }
              else
              {
                if (l_strMPHclldH12 == "1")
                {
                  l_intEndPositionOfAspirationSequence = i_seqOfPipettingStep.GetCount();
                  i_seqOfPipettingStep.SetCurrentPosition(l_intEndPositionOfAspirationSequence);
                }
              }
            }
            else
            {
              i_seqOfPipettingStep.SetCurrentPosition(l_intCurrentMeasurePosition);
            }
            l_strLabwareId = SeqGetLabwareId(i_seqOfPipettingStep);
            if (l_strLabwareId == "")
            {
              MECC::TraceComment(Translate("labware ID \"\" detected...sequence might be consumed or not correct - break of loop forced"));
              break;
            }
            l_strLabwarePositionId = SeqGetPositionId(i_seqOfPipettingStep);
            if (l_strLabwareId == "")
            {
              MECC::TraceComment(Translate("position ID \"\" detected...sequence might be consumed or not correct - break of loop forced"));
              break;
            }
            l_arrFltHeightDetectedInMillimeter.AddAsLast(l_fltLiquidLevel);
            l_fltVolume = DevComputeContainerVolume2(ML_STAR, l_strLabwareId, l_strLabwarePositionId, l_fltLiquidLevel, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
            if (l_fltVolume < 0)
            {
              l_fltVolume = 0;
            }
            l_fltVolumeInMicroLiters = l_fltVolume * 1000;
            l_intVolumeInMicroliters = MthFloor(l_fltVolumeInMicroLiters);
            o_arrFltVolumesDetectedinMicroliter.AddAsLast(l_intVolumeInMicroliters);
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, "Error during aspiration: intMainErrorAspirate = ", l_intMainErrorAspirate);
            l_strErrorMessage = Translate("Unexpected main error code");
            if (l_intMainErrorAspirate == 102)
            {
              MECC::TraceComment(Translate("no tube present or no container filled with liquid -- no cLLD level found"));
              l_strErrorMessage = Translate("No tube present Or No Liquid found in container => set measured volume to zero");
              l_arrFltHeightDetectedInMillimeter.AddAsLast(0);
              o_arrFltVolumesDetectedinMicroliter.AddAsLast(0);
            }
            if (l_intMainErrorAspirate == 6)
            {
              MECC::TraceComment(Translate("insufficient liquid level"));
              l_strErrorMessage = Translate("Insufficient liquid level => set measured volume to zero");
              l_arrFltHeightDetectedInMillimeter.AddAsLast(0);
              o_arrFltVolumesDetectedinMicroliter.AddAsLast(0);
            }
            if (l_intMainErrorAspirate == 28)
            {
              MECC::TraceComment(Translate("unexpected cLLD found level"));
              l_strErrorMessage = Translate("unexpected cLLD found => tube overfilled => set measured volume to zero");
              l_arrFltHeightDetectedInMillimeter.AddAsLast(0);
              o_arrFltVolumesDetectedinMicroliter.AddAsLast(0);
            }
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strErrorMessage, "; height and volume recognition set to 0  to indicate the error state...");
          }
        }
      }
    }
    TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("l_arrFltHeightDetectedInMillimeter : "), l_arrFltHeightDetectedInMillimeter);
    TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("o_arrFltVolumesDetectedinMicroliter : "), o_arrFltVolumesDetectedinMicroliter);
  }

  private function _DATA_ChannelPatternMPH96Columns( variable i_intNumberOfColumns, variable i_intMphPickUpSide, variable & o_strChannelPatternMPH96 ) void {
    private variable l_intIndexChannelPattern;
    private variable l_intNumberOfSamples;
    o_strChannelPatternMPH96 = 0;
    o_strChannelPatternMPH96 = Translate("");
    if (i_intNumberOfColumns > 12)
    {
      l_intNumberOfSamples = 96;
    }
    else
    {
      if (i_intNumberOfColumns <= 0)
      {
        l_intNumberOfSamples = 0;
      }
      else
      {
        l_intNumberOfSamples = i_intNumberOfColumns * 8;
      }
    }
    {
      for(l_intIndexChannelPattern = 0; l_intIndexChannelPattern < l_intNumberOfSamples;)
      {
        l_intIndexChannelPattern = l_intIndexChannelPattern + 1;
        o_strChannelPatternMPH96 = StrConcat2(o_strChannelPatternMPH96, Translate("1"));
      }
    }
    if (i_intMphPickUpSide == TIP_TOOLS::MphPickUpSide::TipPickUpWithLeftSideOfMph)
    {
      StrFillRight(o_strChannelPatternMPH96, Translate("0"), 96);
    }
    if (i_intMphPickUpSide == TIP_TOOLS::MphPickUpSide::TipPickUpWithRightSideOfMph)
    {
      StrFillLeft(o_strChannelPatternMPH96, Translate("0"), 96);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Generated channel pattern for check volume triggered by number of samples and manipulated to full columns."), o_strChannelPatternMPH96);
  }

  private function _DATA_ManageMultipleTroughs( device & ML_STAR, variable i_fltVolume, variable i_fltPreAliquot, variable i_fltPostAliquot, sequence i_seqAspirationPosition, variable i_strLiquidClassNameTransfer, variable i_strChannelPatternAspirate, variable & o_blnPerformedAdditionalVolumeTransfer, sequence & o_seqAspirationPositionSelectedTrough ) variable {
    private variable l_strStepReturnValueAspiration;
    private variable l_arrFltVolumeContainerInMicroliter[];
    private variable l_fltVolumeAspirateAllActiveChannels;
    private variable l_fltVolumeNeededInAdditionPerChannel;
    private variable l_fltVolumeNeededInAddition;
    private variable l_intNumberOfActivatedChannels;
    private variable l_strStepReturnValueDispense;
    private variable l_bool_ConnectedContainer;
    private variable l_str_LabID;
    private variable l_int_ReturnValueErrorDialog;
    private variable l_blnSuccess;
    private variable l_fltVolumeDetectedLowest;
    private variable l_arrFltVolumeContainerInMicroliterASCsorted[];
    private variable loopCounterCurrentContainer;
    private variable l_arr_strLabwareIDs_Asp[];
    private variable l_int_SeqIndex;
    private variable l_intIndexCurrentTrough;
    private variable l_fltNewVolume_SeqAsp;
    private variable l_fltNewResidualVolumeInCurrentTrough;
    private variable l_fltCurrentVolume_SeqAsp;
    private sequence l_seqDispensePositionSelectedTrough;
    private sequence l_seqAspirationPositionSelectedTrough;
    private variable l_strInformationToBeUpdated;
    private variable l_intReturnSearchOfDetectedLabwareID;
    private variable l_blnActivateMeasurementOfVolume;
    private variable l_intNumberOfContainers;
    private variable l_intNumberOfContainersMasterArray;
    private variable l_intNewEndPositionInMasterArray;
    private variable l_fltNewResidualVolumeInCurrentTroughASP;
    private variable l_fltStoredContainerVolume;
    private variable l_strCurrentLabID;
    private variable l_strMessageLabwareIDs;
    private variable l_fltVolumeTransfer;
    private variable l_fltVolumePrePostAliquot;
    private variable l_fltVolumeTransferAllActiveChannels;
    private variable l_fltSumUpInsufficientVolumesInTroughs;
    private variable l_strLabIDOfTroughRetrievingVolumes;
    private variable l_intIndexOfTroughRetrievingVolumes;
    private variable l_int_Index;
    private variable l_intFoundStr60ml;
    private variable l_intFoundStr300ml;
    private variable l_intFoundStr20ml;
    private variable l_intVolMaxPerTrough;
    o_blnPerformedAdditionalVolumeTransfer = 0;
    { sequence __temp; o_seqAspirationPositionSelectedTrough = __temp; }
    l_str_LabID = SeqGetLabwareId(i_seqAspirationPosition);
    l_bool_ConnectedContainer = ASWGLOBAL::BOOL::FALSE;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = ML_STAR.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(l_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      //objRack4.GetRackData(objRackDataParams);
      //l_bool_ConnectedContainer = objRackDataParams.Item1("ConnectedCtr");
      l_bool_ConnectedContainer = objRack4.ConnectedCtr();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    if (l_bool_ConnectedContainer == ASWGLOBAL::BOOL::FALSE)
    {
      MECC::TraceComment(Translate("The requested trough to be tested has no connected container..."));
      o_seqAspirationPositionSelectedTrough = HSLExtensions::Sequence::Copy(i_seqAspirationPosition, 3);
      return (ASWGLOBAL::BOOL::TRUE);
    }
    else
    {
      MECC::TraceComment(Translate("The requested trough to be tested has connected container."));
      o_blnPerformedAdditionalVolumeTransfer = ASWGLOBAL::BOOL::FALSE;
      l_blnActivateMeasurementOfVolume = ASWGLOBAL::BOOL::FALSE;
      l_fltSumUpInsufficientVolumesInTroughs = 0.0;
      l_fltNewResidualVolumeInCurrentTrough = 0;
      l_strLabIDOfTroughRetrievingVolumes = Translate("");
      l_intVolMaxPerTrough = 1;
    }
    l_intNumberOfContainersMasterArray=t_arr_strLabwareIds_Asp.GetSize();
    l_intNewEndPositionInMasterArray = l_intNumberOfContainersMasterArray;
    SeqGetLabwareIds(i_seqAspirationPosition, l_arr_strLabwareIDs_Asp);
    l_intNumberOfContainers=l_arr_strLabwareIDs_Asp.GetSize();
    {
      for(loopCounterCurrentContainer = 0; loopCounterCurrentContainer < l_intNumberOfContainers;)
      {
        loopCounterCurrentContainer = loopCounterCurrentContainer + 1;
        l_intReturnSearchOfDetectedLabwareID = ARRAYTOOLS::Lookup(t_arr_strLabwareIds_Asp, l_arr_strLabwareIDs_Asp.ElementAt( loopCounterCurrentContainer -1));
        l_strInformationToBeUpdated = Translate("");
        l_strInformationToBeUpdated = StrConcat12(Translate("Init check Local trough ID "), l_arr_strLabwareIDs_Asp.ElementAt( loopCounterCurrentContainer -1), Translate(" index "), loopCounterCurrentContainer, Translate(" of "), l_intNumberOfContainers, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        if (l_intReturnSearchOfDetectedLabwareID == 0)
        {
          l_blnActivateMeasurementOfVolume = ASWGLOBAL::BOOL::TRUE;
          l_intNewEndPositionInMasterArray = l_intNewEndPositionInMasterArray + 1;
          t_arr_strLabwareIds_Asp.AddAsLast(l_arr_strLabwareIDs_Asp.ElementAt( loopCounterCurrentContainer -1));
          t_arr_fltVolumes.AddAsLast(0.0);
          l_strInformationToBeUpdated = StrConcat12(l_strInformationToBeUpdated, Translate(" introduced with 0.0 µl start volume in master trough list at index "), l_intNewEndPositionInMasterArray, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        else
        {
          l_strInformationToBeUpdated = StrConcat12(l_strInformationToBeUpdated, Translate(" identified as Master trough ID "), t_arr_strLabwareIds_Asp.ElementAt( l_intReturnSearchOfDetectedLabwareID -1), Translate(" at index "), l_intReturnSearchOfDetectedLabwareID, Translate(" checking stored volume of "), t_arr_fltVolumes.ElementAt( l_intReturnSearchOfDetectedLabwareID -1), Translate(" µl."), Translate(""), Translate(""), Translate(""), Translate(""));
        }
        if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
        {
          l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
      }
    }
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("t_arr_strLabwareIds_Asp"), Translate("t_arr_fltVolumes"), t_arr_strLabwareIds_Asp, t_arr_fltVolumes);
    l_intNumberOfActivatedChannels = StrReplace(i_strChannelPatternAspirate, Translate("1"), Translate("1"));
    l_fltVolumeAspirateAllActiveChannels = i_fltVolume * l_intNumberOfActivatedChannels;
    l_fltVolumePrePostAliquot = i_fltPreAliquot + i_fltPostAliquot;
    l_fltVolumeTransfer = i_fltVolume - l_fltVolumePrePostAliquot;
    l_fltVolumeTransferAllActiveChannels = l_fltVolumeTransfer * l_intNumberOfActivatedChannels;
    if (l_blnActivateMeasurementOfVolume == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("Measurement of troughs activated"));
      l_intNumberOfContainersMasterArray=t_arr_strLabwareIds_Asp.GetSize();
      {
        for(loopCounterCurrentContainer = 0; loopCounterCurrentContainer < l_intNumberOfContainers;)
        {
          loopCounterCurrentContainer = loopCounterCurrentContainer + 1;
          DevGetSequence(ML_STAR, l_arr_strLabwareIDs_Asp.ElementAt( loopCounterCurrentContainer -1), l_seqAspirationPositionSelectedTrough);
          l_seqAspirationPositionSelectedTrough.SetCurrentPosition(1);
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            	l_strStepReturnValueAspiration = arrRetValues[2];
          }
          _DATA_ComputeVolumeInLabware(ML_STAR, l_seqAspirationPositionSelectedTrough, i_strChannelPatternAspirate, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
          l_arrFltVolumeContainerInMicroliterASCsorted = HSLExtensions::Array::Sort(l_arrFltVolumeContainerInMicroliter, 1, l_blnSuccess);
          l_fltVolumeDetectedLowest=l_arrFltVolumeContainerInMicroliterASCsorted.GetAt(1-1);
          l_int_SeqIndex = ARRAYTOOLS::Lookup(t_arr_strLabwareIds_Asp, l_arr_strLabwareIDs_Asp.ElementAt( loopCounterCurrentContainer -1));
          l_fltStoredContainerVolume=t_arr_fltVolumes.GetAt(l_int_SeqIndex-1);
          ARRAYTOOLS::Update_Value_in_Array(t_arr_fltVolumes, l_fltVolumeDetectedLowest, l_int_SeqIndex);
          l_strInformationToBeUpdated = Translate("");
          l_strInformationToBeUpdated = StrConcat12(Translate("LLD check Master trough ID "), t_arr_strLabwareIds_Asp.ElementAt( l_int_SeqIndex -1), Translate(" index "), l_int_SeqIndex, Translate(" of "), l_intNumberOfContainersMasterArray, Translate(" local trough ID "), l_arr_strLabwareIDs_Asp.ElementAt( loopCounterCurrentContainer -1), Translate(" index "), loopCounterCurrentContainer, Translate(" of "), l_intNumberOfContainers);
          l_strInformationToBeUpdated = StrConcat12(l_strInformationToBeUpdated, Translate(" updating stored liquid level "), l_fltStoredContainerVolume, Translate(" µl with "), l_fltVolumeDetectedLowest, Translate(" µl. "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
          {
            l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
          }
        }
      }
      TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_RELEASE, Translate("t_arr_strLabwareIds_Asp"), Translate("t_arr_fltVolumes"), t_arr_strLabwareIds_Asp, t_arr_fltVolumes);
    }
    l_intIndexCurrentTrough = 0;
    {
      for(loopCounterCurrentContainer = 0; loopCounterCurrentContainer < l_intNumberOfContainers;)
      {
        loopCounterCurrentContainer = loopCounterCurrentContainer + 1;
        l_int_SeqIndex = ARRAYTOOLS::Lookup(t_arr_strLabwareIds_Asp, l_arr_strLabwareIDs_Asp.ElementAt( loopCounterCurrentContainer -1));
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Volume within current trough "), t_arr_fltVolumes.ElementAt( l_int_SeqIndex -1), Translate(" vs. requested volume to aspirate "), l_fltVolumeAspirateAllActiveChannels);
        l_strInformationToBeUpdated = StrConcat12(Translate("Select Master trough ID "), t_arr_strLabwareIds_Asp.ElementAt( l_int_SeqIndex -1), Translate(" index "), l_int_SeqIndex, Translate(" of "), l_intNumberOfContainersMasterArray, Translate(" local trough ID : "), l_arr_strLabwareIDs_Asp.ElementAt( loopCounterCurrentContainer -1), Translate(" index "), loopCounterCurrentContainer, Translate(" of "), l_intNumberOfContainers);
        l_strInformationToBeUpdated = StrConcat12(l_strInformationToBeUpdated, Translate(" volume stored "), t_arr_fltVolumes.ElementAt( l_int_SeqIndex -1), Translate(" µl. vs requested "), l_fltVolumeAspirateAllActiveChannels, Translate(" µl."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        if (t_arr_fltVolumes.ElementAt( l_int_SeqIndex -1) >= l_fltVolumeAspirateAllActiveChannels)
        {
          MECC::TraceComment(Translate("Current trough has sufficient volume"));
          l_strInformationToBeUpdated = StrConcat4(l_strInformationToBeUpdated, Translate(" Sufficient volume detected and applied."), Translate(""), Translate(""));
          if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
          {
            l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
          }
          l_intIndexCurrentTrough = loopCounterCurrentContainer;
          break;
        }
        else
        {
          MECC::TraceComment(Translate("Current trough has insufficient volume - let us sum up left overs and remember them"));
          l_strInformationToBeUpdated = StrConcat4(l_strInformationToBeUpdated, Translate(" Insufficient volume detected and skipped."), Translate(""), Translate(""));
          if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
          {
            l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
          }
          l_fltSumUpInsufficientVolumesInTroughs = l_fltSumUpInsufficientVolumesInTroughs + t_arr_fltVolumes.ElementAt( l_int_SeqIndex -1);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_fltSumUpInsufficientVolumesInTroughs : "), l_fltSumUpInsufficientVolumesInTroughs);
        }
      }
    }
    if (l_intIndexCurrentTrough > 0)
    {
      MECC::TraceComment(Translate("A trough has been found containing enough liquid to be transferred.\nPrepare sequences for transfer step and store new volumes within array (before pipetting step is performed)..."));
      DevGetSequence(ML_STAR, t_arr_strLabwareIds_Asp.ElementAt( l_int_SeqIndex -1), o_seqAspirationPositionSelectedTrough);
      o_seqAspirationPositionSelectedTrough.SetCurrentPosition(1);
      l_fltCurrentVolume_SeqAsp=t_arr_fltVolumes.GetAt(l_int_SeqIndex-1);
      l_fltNewVolume_SeqAsp = l_fltCurrentVolume_SeqAsp - l_fltVolumeTransferAllActiveChannels;
      ARRAYTOOLS::Update_Value_in_Array(t_arr_fltVolumes, l_fltNewVolume_SeqAsp, l_int_SeqIndex);
      TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("t_arr_strLabwareIds_Asp"), Translate("t_arr_fltVolumes"), t_arr_strLabwareIds_Asp, t_arr_fltVolumes);
      l_strInformationToBeUpdated = Translate("");
      l_strInformationToBeUpdated = StrConcat12(Translate("Update selected Master trough ID "), t_arr_strLabwareIds_Asp.ElementAt( l_int_SeqIndex -1), Translate(" index "), l_int_SeqIndex, Translate(" of "), l_intNumberOfContainersMasterArray, Translate(" local trough ID "), l_arr_strLabwareIDs_Asp.ElementAt( loopCounterCurrentContainer -1), Translate(" index "), loopCounterCurrentContainer, Translate(" of "), l_intNumberOfContainers);
      l_strInformationToBeUpdated = StrConcat12(l_strInformationToBeUpdated, Translate(" updating "), l_fltCurrentVolume_SeqAsp, Translate(" µl with "), l_fltNewVolume_SeqAsp, Translate(" µl. "), l_intNumberOfActivatedChannels, Translate(" x transfer volume "), l_fltVolumeTransfer, Translate(" µl consumes "), l_fltVolumeTransferAllActiveChannels, Translate(" µl."));
      if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
      {
        l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    else
    {
      MECC::TraceComment(Translate("Insufficient liquid within each individual trough detected. Checking if reorganizing troughs might help...\n"));
      if (l_fltSumUpInsufficientVolumesInTroughs < l_fltVolumeAspirateAllActiveChannels)
      {
        MECC::TraceComment(Translate("\nEven if we sum up all left overs of the troughs dealing with requested reagent type - it is not enough .No reorganizing of troughs can help. skip routine and ask USER to reload liquid.\n"));
        l_strMessageLabwareIDs = Translate("");
        {
          for(loopCounterCurrentContainer = 0; loopCounterCurrentContainer < l_intNumberOfContainers;)
          {
            loopCounterCurrentContainer = loopCounterCurrentContainer + 1;
            l_strCurrentLabID=l_arr_strLabwareIDs_Asp.GetAt(loopCounterCurrentContainer-1);
            l_strMessageLabwareIDs = StrConcat4(l_strMessageLabwareIDs, l_strCurrentLabID, Translate(" , "), Translate(""));
          }
        }
        l_strInformationToBeUpdated = Translate("");
        l_strInformationToBeUpdated = StrConcat12(l_strInformationToBeUpdated, Translate("Reorganization of troughs not possible. Reloading requested:  "), l_strMessageLabwareIDs, Translate("."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
        {
          l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        }
        l_int_ReturnValueErrorDialog = VectorCustomDialogs::ErrorDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 300, Translate("Insufficient liquid for current reagent detected. "), Translate("Refill beginning from 1st available reagent trough and press OK to continue. All troughs will be measured again. Selecting Cancel will lead to an inacurate liquid transfer. Timeout of 300 seconds will be interpreted as selecting  CANCEL as well."));
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_int_ReturnValueErrorDialog);
        if (l_int_ReturnValueErrorDialog != 1)
        {
          MECC::TraceComment(Translate("User pressed CANCEL or TIMEOUT occured --> no manipulation of asiration sequence takes place - aspiration step might lead to an error recovered by user"));
          o_blnPerformedAdditionalVolumeTransfer = ASWGLOBAL::BOOL::FALSE;
          TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seqAspirationPositionSelectedTrough);
          o_seqAspirationPositionSelectedTrough = HSLExtensions::Sequence::Copy(i_seqAspirationPosition, 3);
          o_seqAspirationPositionSelectedTrough.SetCurrentPosition(1);
          TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seqAspirationPositionSelectedTrough);
        }
        else
        {
          MECC::TraceComment(Translate("User pressed ok and refilled trough --> reset current position of asiration sequence to 1"));
          TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seqAspirationPositionSelectedTrough);
          o_seqAspirationPositionSelectedTrough = HSLExtensions::Sequence::Copy(i_seqAspirationPosition, 3);
          o_seqAspirationPositionSelectedTrough.SetCurrentPosition(1);
          TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seqAspirationPositionSelectedTrough);
        }
        if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        }
        MECC::TraceComment(Translate("Measurement of troughs activated"));
        l_intNumberOfContainersMasterArray=t_arr_strLabwareIds_Asp.GetSize();
        {
          for(loopCounterCurrentContainer = 0; loopCounterCurrentContainer < l_intNumberOfContainers;)
          {
            loopCounterCurrentContainer = loopCounterCurrentContainer + 1;
            DevGetSequence(ML_STAR, l_arr_strLabwareIDs_Asp.ElementAt( loopCounterCurrentContainer -1), l_seqAspirationPositionSelectedTrough);
            l_seqAspirationPositionSelectedTrough.SetCurrentPosition(1);
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	l_strStepReturnValueAspiration = arrRetValues[2];
            }
            _DATA_ComputeVolumeInLabware(ML_STAR, l_seqAspirationPositionSelectedTrough, i_strChannelPatternAspirate, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
            l_arrFltVolumeContainerInMicroliterASCsorted = HSLExtensions::Array::Sort(l_arrFltVolumeContainerInMicroliter, 1, l_blnSuccess);
            l_fltVolumeDetectedLowest=l_arrFltVolumeContainerInMicroliterASCsorted.GetAt(1-1);
            l_int_SeqIndex = ARRAYTOOLS::Lookup(t_arr_strLabwareIds_Asp, l_arr_strLabwareIDs_Asp.ElementAt( loopCounterCurrentContainer -1));
            l_fltStoredContainerVolume=t_arr_fltVolumes.GetAt(l_int_SeqIndex-1);
            ARRAYTOOLS::Update_Value_in_Array(t_arr_fltVolumes, l_fltVolumeDetectedLowest, l_int_SeqIndex);
            l_strInformationToBeUpdated = Translate("");
            l_strInformationToBeUpdated = StrConcat12(Translate("LLD check Master trough ID "), t_arr_strLabwareIds_Asp.ElementAt( l_int_SeqIndex -1), Translate(" index "), l_int_SeqIndex, Translate(" of "), l_intNumberOfContainersMasterArray, Translate(" local trough ID "), l_arr_strLabwareIDs_Asp.ElementAt( loopCounterCurrentContainer -1), Translate(" index "), loopCounterCurrentContainer, Translate(" of "), l_intNumberOfContainers);
            l_strInformationToBeUpdated = StrConcat12(l_strInformationToBeUpdated, Translate(" updating stored liquid level "), l_fltStoredContainerVolume, Translate(" µl with "), l_fltVolumeDetectedLowest, Translate(" µl. "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
            {
              l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
            }
          }
        }
        TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_RELEASE, Translate("t_arr_strLabwareIds_Asp"), Translate("t_arr_fltVolumes"), t_arr_strLabwareIds_Asp, t_arr_fltVolumes);
        l_fltSumUpInsufficientVolumesInTroughs = 0.0;
        l_intIndexCurrentTrough = 0;
        {
          for(loopCounterCurrentContainer = 0; loopCounterCurrentContainer < l_intNumberOfContainers;)
          {
            loopCounterCurrentContainer = loopCounterCurrentContainer + 1;
            l_int_SeqIndex = ARRAYTOOLS::Lookup(t_arr_strLabwareIds_Asp, l_arr_strLabwareIDs_Asp.ElementAt( loopCounterCurrentContainer -1));
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Volume within current trough "), t_arr_fltVolumes.ElementAt( l_int_SeqIndex -1), Translate(" vs. requested volume to aspirate "), l_fltVolumeAspirateAllActiveChannels);
            l_strInformationToBeUpdated = StrConcat12(Translate("Select Master trough ID "), t_arr_strLabwareIds_Asp.ElementAt( l_int_SeqIndex -1), Translate(" index "), l_int_SeqIndex, Translate(" of "), l_intNumberOfContainersMasterArray, Translate(" local trough ID : "), l_arr_strLabwareIDs_Asp.ElementAt( loopCounterCurrentContainer -1), Translate(" index "), loopCounterCurrentContainer, Translate(" of "), l_intNumberOfContainers);
            l_strInformationToBeUpdated = StrConcat12(l_strInformationToBeUpdated, Translate(" volume stored "), t_arr_fltVolumes.ElementAt( l_int_SeqIndex -1), Translate(" µl. vs requested "), l_fltVolumeAspirateAllActiveChannels, Translate(" µl."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            if (t_arr_fltVolumes.ElementAt( l_int_SeqIndex -1) >= l_fltVolumeAspirateAllActiveChannels)
            {
              MECC::TraceComment(Translate("Current trough has sufficient volume"));
              l_strInformationToBeUpdated = StrConcat4(l_strInformationToBeUpdated, Translate(" Sufficient volume detected and applied."), Translate(""), Translate(""));
              if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
              {
                l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
                if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
                {
                  return (ASWGLOBAL::BOOL::FALSE);
                }
              }
              l_intIndexCurrentTrough = loopCounterCurrentContainer;
              break;
            }
            else
            {
              MECC::TraceComment(Translate("Current trough has insufficient volume - let\"s sum up left overs and remember them"));
              l_strInformationToBeUpdated = StrConcat4(l_strInformationToBeUpdated, Translate(" Insufficient volume detected and skipped."), Translate(""), Translate(""));
              if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
              {
                l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
                if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
                {
                  return (ASWGLOBAL::BOOL::FALSE);
                }
              }
              l_fltSumUpInsufficientVolumesInTroughs = l_fltSumUpInsufficientVolumesInTroughs + t_arr_fltVolumes.ElementAt( l_int_SeqIndex -1);
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_fltSumUpInsufficientVolumesInTroughs : "), l_fltSumUpInsufficientVolumesInTroughs);
            }
          }
        }
        if (l_intIndexCurrentTrough == 0)
        {
          MECC::TraceComment(Translate("Either the user did not reload any liquid OR the system could't find a trough with enough volume after reloading procedure...\n"));
          if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
          {
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          }
          l_int_ReturnValueErrorDialog = VectorCustomDialogs::ErrorDialog(Translate(""), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 300, Translate("Insufficient liquid after reloading procedure for current reagent detected. "), Translate("Refill beginning from 1st available reagent trough and press OK to continue. Selecting Cancel will lead to an inacurate liquid transfer. Timeout of 300 seconds will be interpreted as selecting  CANCEL as well."));
          _DATA_TranslateVectorCustomDialogsErrorCodes(l_int_ReturnValueErrorDialog);
          if (l_int_ReturnValueErrorDialog != 1)
          {
            MECC::TraceComment(Translate("User pressed CANCEL or TIMEOUT occured --> no manipulation of asiration sequence takes place - aspiration step might lead to an error recovered by user"));
            o_blnPerformedAdditionalVolumeTransfer = ASWGLOBAL::BOOL::FALSE;
          }
          else
          {
            MECC::TraceComment(Translate("User pressed ok and refilled trough --> reset current position of asiration sequence to 1"));
            o_seqAspirationPositionSelectedTrough.SetCurrentPosition(1);
          }
          if (t_blnLockUnlockSystem == ASWGLOBAL::BOOL::TRUE)
          {
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          }
        }
      }
      else
      {
        MECC::TraceComment(Translate("If we sum up all left overs of the troughs dealing with requested reagent type - it is enough . reorganizing starts ."));
        l_strInformationToBeUpdated = Translate("");
        l_strInformationToBeUpdated = StrConcat12(l_strInformationToBeUpdated, Translate("Reorganization of troughs. "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
        {
          l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
        TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("t_arr_fltVolumes"), t_arr_fltVolumes);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intIndexCurrentTrough"), l_intIndexCurrentTrough);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_fltVolumeAspirateAllActiveChannels"), l_fltVolumeAspirateAllActiveChannels);
        {
          for(loopCounterCurrentContainer = 0; loopCounterCurrentContainer < l_intNumberOfContainers;)
          {
            loopCounterCurrentContainer = loopCounterCurrentContainer + 1;
            MECC::TraceComment(Translate("l_int Index defines trough of current reagent within all trough array for reorganization"));
            l_int_Index = ARRAYTOOLS::Lookup(t_arr_strLabwareIds_Asp, l_arr_strLabwareIDs_Asp.ElementAt( loopCounterCurrentContainer -1));
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_int_Index   "), l_int_Index);
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("loopCounterCurrentContainer  "), loopCounterCurrentContainer);
            if (loopCounterCurrentContainer == 1)
            {
              l_strLabIDOfTroughRetrievingVolumes = l_arr_strLabwareIDs_Asp.ElementAt( loopCounterCurrentContainer -1);
              l_intIndexOfTroughRetrievingVolumes = l_int_Index;
              l_fltNewResidualVolumeInCurrentTrough=t_arr_fltVolumes.GetAt(l_intIndexOfTroughRetrievingVolumes-1);
            }
            else
            {
              MECC::TraceComment(Translate("Additional volume requested found in an available trough - transferring liquid from trough to trough started"));
              DevGetSequence(ML_STAR, l_arr_strLabwareIDs_Asp.ElementAt( loopCounterCurrentContainer -1), l_seqAspirationPositionSelectedTrough);
              l_seqAspirationPositionSelectedTrough.SetCurrentPosition(1);
              TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, l_seqAspirationPositionSelectedTrough);
              DevGetSequence(ML_STAR, l_strLabIDOfTroughRetrievingVolumes, l_seqDispensePositionSelectedTrough);
              l_seqDispensePositionSelectedTrough.SetCurrentPosition(1);
              TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, l_seqDispensePositionSelectedTrough);
              _DATA_SetRackVisibility(o_seqAspirationPositionSelectedTrough, ML_STAR);
              _DATA_SetRackVisibility(l_seqDispensePositionSelectedTrough, ML_STAR);
              l_fltVolumeNeededInAddition = t_arr_fltVolumes.ElementAt( l_int_Index -1);
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Current transfer volume = "), l_fltVolumeNeededInAddition);
              l_fltVolumeNeededInAdditionPerChannel = l_fltVolumeNeededInAddition / (l_intNumberOfActivatedChannels * 1.0);
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_fltVolumeNeededInAdditionPerChannel"), l_fltVolumeNeededInAdditionPerChannel);
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
              l_fltNewResidualVolumeInCurrentTroughASP = 0;
              ARRAYTOOLS::Update_Value_in_Array(t_arr_fltVolumes, l_fltNewResidualVolumeInCurrentTroughASP, loopCounterCurrentContainer);
              l_fltNewResidualVolumeInCurrentTrough = l_fltNewResidualVolumeInCurrentTrough + l_fltVolumeNeededInAddition;
              ARRAYTOOLS::Update_Value_in_Array(t_arr_fltVolumes, l_fltNewResidualVolumeInCurrentTrough, l_intIndexOfTroughRetrievingVolumes);
              TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("t_arr_strLabwareIds_Asp"), Translate("t_arr_fltVolumes"), t_arr_strLabwareIds_Asp, t_arr_fltVolumes);
              MECC::TraceComment("Group start - check if automatic refilling exceeds max volume per trough");
              l_intFoundStr20ml = StrFind(l_strLabIDOfTroughRetrievingVolumes, Translate("20ml"));
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intFoundStr20ml "), l_intFoundStr20ml);
              if (l_intFoundStr20ml >= 0)
              {
                l_intVolMaxPerTrough = 20000;
              }
              l_intFoundStr60ml = StrFind(l_strLabIDOfTroughRetrievingVolumes, Translate("60ml"));
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intFoundStr60ml "), l_intFoundStr60ml);
              if (l_intFoundStr60ml >= 0)
              {
                l_intVolMaxPerTrough = 60000;
              }
              l_intFoundStr300ml = StrFind(l_strLabIDOfTroughRetrievingVolumes, Translate("300ml"));
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intFoundStr300ml "), l_intFoundStr300ml);
              if (l_intFoundStr300ml >= 0)
              {
                l_intVolMaxPerTrough = 300000;
              }
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intVolMaxPerTrough "), l_intVolMaxPerTrough);
              if (l_fltNewResidualVolumeInCurrentTrough >= l_intVolMaxPerTrough)
              {
                MECC::TraceComment(Translate("First trough has been automatically refilled by left overs from other troughs - break loop as this trough may not be over filled..."));
                break;
              }
              MECC::TraceComment("Group end - check if automatic refilling exceeds max volume per trough");
            }
          }
        }
        o_seqAspirationPositionSelectedTrough = HSLExtensions::Sequence::Copy(l_seqDispensePositionSelectedTrough, 3);
        o_seqAspirationPositionSelectedTrough.SetCurrentPosition(1);
        o_blnPerformedAdditionalVolumeTransfer = ASWGLOBAL::BOOL::TRUE;
        l_strInformationToBeUpdated = Translate("");
        l_int_Index = ARRAYTOOLS::Lookup(t_arr_strLabwareIds_Asp, l_strLabIDOfTroughRetrievingVolumes);
        l_strInformationToBeUpdated = StrConcat12(Translate("Reorganize Master trough ID "), t_arr_strLabwareIds_Asp.ElementAt( l_int_Index -1), Translate(" index "), l_int_Index, Translate(" of "), l_intNumberOfContainersMasterArray, Translate(" local trough ID "), l_strLabIDOfTroughRetrievingVolumes, Translate(" index 1 of"), l_intNumberOfContainers, Translate(" with following volume in µl : "), l_fltNewResidualVolumeInCurrentTrough);
        if (t_intTraceLevel == TRACE_LEVEL_DEBUG)
        {
          l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
        TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("t_arr_fltVolumes"), t_arr_fltVolumes);
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_CalculateAverageVolumeOfVolumeArray( variable & i_arrFltVolume[], variable i_strChannelPattern, variable i_intStartIndexOfPipettingRoutine, variable i_fltAdditionalDeadVolume, variable & o_FltAverageVolume ) void {
    private variable l_fltVolumeCurrentIndex;
    private variable l_strCurrentStatusOfChannel;
    private variable l_intLenghOfChannelPattern;
    private variable l_intIndexOfPipettingRoutine;
    private variable loopCounter1;
    private variable l_intNumberOfActivatedChannels;
    private variable l_intNumberOfLoops;
    private variable l_intSizeOfVolumeArray;
    private variable l_intCounterChannelStatus;
    o_FltAverageVolume = 0;
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("i_fltAdditionalDeadVolume : "), i_fltAdditionalDeadVolume);
    l_intNumberOfActivatedChannels = StrReplace(i_strChannelPattern, Translate("1"), Translate("1"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("identified number of activated channels : "), l_intNumberOfActivatedChannels);
    l_intLenghOfChannelPattern = StrGetLength(i_strChannelPattern);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_intLenghOfChannelPattern : "), l_intLenghOfChannelPattern);
    l_intSizeOfVolumeArray=i_arrFltVolume.GetSize();
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("l_intSizeOfVolumeArray : "), l_intSizeOfVolumeArray);
    if (l_intLenghOfChannelPattern > l_intSizeOfVolumeArray)
    {
      l_intNumberOfLoops = l_intSizeOfVolumeArray;
    }
    else
    {
      l_intNumberOfLoops = l_intLenghOfChannelPattern;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("stored number of loops : "), l_intNumberOfLoops);
    o_FltAverageVolume = 0;
    l_intIndexOfPipettingRoutine = i_intStartIndexOfPipettingRoutine;
    l_intCounterChannelStatus = 0;
    {
      for(loopCounter1 = 0; loopCounter1 < l_intNumberOfLoops;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_strCurrentStatusOfChannel = StrMid(i_strChannelPattern, l_intCounterChannelStatus, 1);
        l_intCounterChannelStatus = l_intCounterChannelStatus + 1;
        if (l_strCurrentStatusOfChannel == "1")
        {
          MECC::TraceComment(Translate("activated channel found within channel pattern. volume calculation started."));
          l_fltVolumeCurrentIndex=i_arrFltVolume.GetAt(l_intIndexOfPipettingRoutine-1);
          o_FltAverageVolume = o_FltAverageVolume + l_fltVolumeCurrentIndex;
          TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, Translate("IndexOfPipettingRoutine "), l_intIndexOfPipettingRoutine, Translate(" vs. Index to determine channel pattern position "), loopCounter1, Translate(". Volumes accumulated : "), o_FltAverageVolume, Translate(". Performed loop number "), loopCounter1, Translate(" of max number of loops :"), l_intNumberOfLoops);
        }
        else
        {
          MECC::TraceComment(Translate("disabeled channel found within channel pattern"));
        }
        l_intIndexOfPipettingRoutine = l_intIndexOfPipettingRoutine + 1;
      }
    }
    if (o_FltAverageVolume > 0)
    {
      o_FltAverageVolume = o_FltAverageVolume + i_fltAdditionalDeadVolume;
      o_FltAverageVolume = o_FltAverageVolume / (l_intNumberOfActivatedChannels * 1.0);
    }
    if (o_FltAverageVolume < 0)
    {
      o_FltAverageVolume = 0;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Volumes average : "), o_FltAverageVolume);
  }

  private function _DATA_SetRackVisibility( sequence i_sequence, device & ML_STAR ) void {
    private variable l_intNumberOfLabwareIDs;
    private variable l_strCurrentLabwareID;
    private variable l_intIndexLabwareID;
    private sequence l_seqWildCard;
    private variable l_arrLabwareIDs[];
    SeqGetLabwareIds(i_sequence, l_arrLabwareIDs);
    l_intNumberOfLabwareIDs=l_arrLabwareIDs.GetSize();
    onerror goto errLabel_11 ;
    err.Clear();
    {
      for(l_intIndexLabwareID = 0; l_intIndexLabwareID < l_intNumberOfLabwareIDs;)
      {
        l_intIndexLabwareID = l_intIndexLabwareID + 1;
        l_strCurrentLabwareID=l_arrLabwareIDs.GetAt(l_intIndexLabwareID-1);
        SeqAdd(l_seqWildCard, l_strCurrentLabwareID, Translate("A1"));
        SeqResetSequenceIndexes(l_seqWildCard);
        HSLLabwState::SetLabwareVisibility(ML_STAR, l_seqWildCard, 300, ASWGLOBAL::BOOL::TRUE);
        SeqRemoveAll(l_seqWildCard);
      }
    }
    errLabel_11 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
  }

  function PIP_Channels_DoubleAspiration( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume1stTransfer, variable i_fltVolume2ndTransfer, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom1stTransfer, variable i_fltAspirateHeightFromBottom2ndTransfer, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense ) variable {
    private variable l_strVolume;
    private variable l_strComment;
    private variable i_fltAspirateHeightFromBottom;
    private variable l_blnStringDispenseModeSurfaceEmpty;
    private variable l_strStepReturnValueDispense;
    private variable l_intMainLoopTransferLiquids;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_blnSuccess;
    private variable l_strStepReturnValueAspiration;
    private variable l_strChannelPattern;
    private variable l_fltVolumeTotal;
    private variable l_intMixCycleAspiration;
    private variable l_strTypeOfLabware;
    private variable l_intCurrentDispenseMode;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intCurrentTipType;
    private variable l_strTipCounterNameIntermediate;
    private variable l_intMixCycleDispense;
    private variable l_fltVolumeAspiration;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    private variable l_intNumberOfSamples;
    private variable l_strCurrentDispenseMode;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_arrFltVolumeContainerInMicroliter[];
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_fltVolumeTotal = i_fltVolume1stTransfer + i_fltVolume2ndTransfer;
    l_strVolume = StrFStr(l_fltVolumeTotal);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents using double transfer mode "), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_fltVolume1stTransfer : "), i_fltVolume1stTransfer);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_fltVolume2ndTransfer : "), i_fltVolume2ndTransfer);
    _DATA_SetRackVisibility(i_seqAspirationPosition, ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_blnStringDispenseModeSurfaceEmpty = StrFind(i_strLiquidClassNameTransfer, Translate("SurfaceEmpty"));
      l_blnSuccess = _DATA_PlausibilityCheckVolume(l_fltVolumeTotal, l_intCurrentTipType);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      l_blnSuccess = _DATA_PlausibilityCheckVolume(i_fltVolume1stTransfer, l_intCurrentTipType);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      l_blnSuccess = _DATA_PlausibilityCheckVolume(i_fltVolume2ndTransfer, l_intCurrentTipType);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      _DATA_InterpreteLabwareID(ML_STAR, i_seqAspirationPosition, l_strTypeOfLabware);
      l_intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        l_blnSuccess = _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
        if (i_fltVolumeMixDispense == 0)
        {
          l_intMixCycleDispense = 0;
        }
        else
        {
          l_intMixCycleDispense = i_intMixCycles;
        }
        if (i_fltVolumeMixAspiration == 0)
        {
          l_intMixCycleAspiration = 0;
        }
        else
        {
          l_intMixCycleAspiration = i_intMixCycles;
        }
        MECC::TraceComment(Translate("********** Now pipetting reagents to destination plate"));
        if (l_intCurrentTipType == 1)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
        }
        if (l_intCurrentTipType == 5)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
        }
        if (l_intCurrentTipType == 23)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
        }
        {
          l_intMainLoopTransferLiquids = 0;
          while (
             (i_seqDispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seqAspirationPosition, 1, i_seqDispensePosition, 1);
            l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
            if (l_intMainLoopTransferLiquids > 1)
            {
              l_intMixCycleAspiration = 0;
            }
            l_strChannelPattern = Translate("");
            l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPattern, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, i_seqDispensePosition);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            l_fltVolumeAspiration = i_fltVolume1stTransfer;
            l_strInformationToBeUpdated = StrConcat8(Translate("1st aspiration"), Translate(" : "), l_fltVolumeAspiration, Translate(" µl."), Translate(""), Translate(""), Translate(""), Translate(""));
            l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            i_fltAspirateHeightFromBottom = i_fltAspirateHeightFromBottom1stTransfer;
            if (i_fltAspirateHeightFromBottom == 0)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
              _DATA_ComputeVolumeInLabware(ML_STAR, i_seqAspirationPosition, l_strChannelPattern, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
              t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterAspiration, l_arrFltVolumeContainerInMicroliter);
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
            }
            l_fltVolumeAspiration = i_fltVolume2ndTransfer;
            l_strInformationToBeUpdated = StrConcat8(Translate("2nd aspiration"), Translate(" : "), l_fltVolumeAspiration, Translate(" µl."), Translate(""), Translate(""), Translate(""), Translate(""));
            l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            i_fltAspirateHeightFromBottom = i_fltAspirateHeightFromBottom2ndTransfer;
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	l_strStepReturnValueAspiration = arrRetValues[2];
            }
            l_fltVolumeAspiration = i_fltVolume1stTransfer + i_fltVolume2ndTransfer;
            if (i_fltDispenseHeightFromBottom == 0)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_ComputeVolumeInLabware(ML_STAR, i_seqDispensePosition, l_strChannelPattern, l_strStepReturnValueDispense, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
              t_arrFltVolumeContainerInMicroliterDispense = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterDispense, l_arrFltVolumeContainerInMicroliter);
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
            }
            l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPattern);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            SeqIncrement(i_seqAspirationPosition, t_intNumberOfAllAvailableChannels);
            SeqIncrement(i_seqDispensePosition, t_intNumberOfAllAvailableChannels);
            if (
               (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
          i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
          i_seqAspirationPosition.SetCurrentPosition(1);
          i_seqDispensePosition.SetCurrentPosition(1);
        }
      }
      if (l_strCurrentDispenseMode == "Part")
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Dispense Mode"));
        _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported dispense mode detected."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_MPH_DoubleAspiration( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume1stTransfer, variable i_fltVolume2ndTransfer, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom1stTransfer, variable i_fltAspirateHeightFromBottom2ndTransfer, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense ) variable {
    private variable l_strVolume;
    private variable l_strComment;
    private variable i_fltAspirateHeightFromBottom;
    private variable l_intTotalColumns;
    private variable l_strStepReturnValueDispense;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strChannelPattern;
    private variable l_blnSuccess;
    private variable l_strStepReturnValueAspiration;
    private variable l_fltVolumeTotal;
    private variable l_intMixCycleAspiration;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intCurrentDispenseMode;
    private variable l_intCurrentTipType;
    private variable l_strTipCounterNameIntermediate;
    private variable l_intMixCycleDispense;
    private variable l_fltVolumeAspiration;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    private variable l_strCurrentDispenseMode;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDOfTargetSequence;
    private sequence l_seqTempAspirationPosition;
    private sequence l_seqTempDispensePosition;
    private variable l_arrFltVolumeContainerInMicroliter[];
    private variable l_intNumberOfSamplesAdjustedToFullColumns;
    private variable l_intTotalRows;
    private variable l_intNumberOfSamplesAdjustedToFullRows;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_fltVolumeTotal = i_fltVolume1stTransfer + i_fltVolume2ndTransfer;
    l_strVolume = StrFStr(l_fltVolumeTotal);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents using MPH"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnSuccess = _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    _DATA_SetRackVisibility(i_seqAspirationPosition, ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_blnSuccess = _DATA_PlausibilityCheckVolume(l_fltVolumeTotal, l_intCurrentTipType);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      l_blnSuccess = _DATA_PlausibilityCheckVolume(i_fltVolume1stTransfer, l_intCurrentTipType);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      l_blnSuccess = _DATA_PlausibilityCheckVolume(i_fltVolume2ndTransfer, l_intCurrentTipType);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        if (t_intMPH96TipPickUpSide <= 1)
        {
          MECC::TraceComment(Translate("tip pick up side is defined to pick up columns"));
          _DATA_MPH_ProvideSequenceFullColumns(i_seqAspirationPosition, l_seqTempAspirationPosition);
          _DATA_MPH_ProvideSequenceFullColumns(i_seqDispensePosition, l_seqTempDispensePosition);
          l_intNumberOfSamplesAdjustedToFullColumns = l_seqTempAspirationPosition.GetCount();
          l_intTotalColumns = l_intNumberOfSamplesAdjustedToFullColumns / 8;
          _DATA_ChannelPatternMPH96Columns(l_intTotalColumns, t_intMPH96TipPickUpSide, l_strChannelPattern);
        }
        else
        {
          MECC::TraceComment(Translate("tip pick up side is defined to pick up rows"));
          _DATA_MPH_ProvideSequenceFullRows(i_seqAspirationPosition, l_seqTempAspirationPosition);
          _DATA_MPH_ProvideSequenceFullRows(i_seqDispensePosition, l_seqTempDispensePosition);
          l_intNumberOfSamplesAdjustedToFullRows = l_seqTempAspirationPosition.GetCount();
          l_intTotalRows = l_intNumberOfSamplesAdjustedToFullRows / 12;
          _DATA_ChannelPatternMPH96Rows(l_intTotalRows, t_intMPH96TipPickUpSide, l_strChannelPattern);
        }
        if (i_fltVolumeMixDispense == 0)
        {
          l_intMixCycleDispense = 0;
        }
        else
        {
          l_intMixCycleDispense = i_intMixCycles;
        }
        if (i_fltVolumeMixAspiration == 0)
        {
          l_intMixCycleAspiration = 0;
        }
        else
        {
          l_intMixCycleAspiration = i_intMixCycles;
        }
        if (l_intCurrentTipType == 5)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
        }
        if (l_intCurrentTipType == 1)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
        }
        if (l_intCurrentTipType == 23)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
        }
        if (t_intMPH96TipPickUpSide <= 1)
        {
          l_blnSuccess = _PickUpTipsMPH96Columns(ML_STAR, l_strTipCounterNameIntermediate, l_intTotalColumns, t_intMPH96TipPickUpSide);
        }
        else
        {
          l_blnSuccess = _PickUpTipsMPH96Rows(ML_STAR, l_strTipCounterNameIntermediate, l_intTotalRows, t_intMPH96TipPickUpSide);
        }
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
        l_fltVolumeAspiration = i_fltVolume1stTransfer;
        l_strInformationToBeUpdated = StrConcat8(Translate("1st aspiration"), Translate(" : "), l_fltVolumeAspiration, Translate(" µl."), Translate(""), Translate(""), Translate(""), Translate(""));
        l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
        i_fltAspirateHeightFromBottom = i_fltAspirateHeightFromBottom1stTransfer;
        if (i_fltAspirateHeightFromBottom == 0)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            	l_strStepReturnValueAspiration = arrRetValues[2];
          }
          _DATA_ComputeVolumeInLabware(ML_STAR, l_seqTempAspirationPosition, l_strChannelPattern, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::TRUE, l_arrFltVolumeContainerInMicroliter);
          t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Copy(l_arrFltVolumeContainerInMicroliter);
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            	l_strStepReturnValueAspiration = arrRetValues[2];
          }
        }
        l_fltVolumeAspiration = i_fltVolume2ndTransfer;
        l_strInformationToBeUpdated = StrConcat8(Translate("2nd aspiration"), Translate(" : "), l_fltVolumeAspiration, Translate(" µl."), Translate(""), Translate(""), Translate(""), Translate(""));
        i_fltAspirateHeightFromBottom = i_fltAspirateHeightFromBottom2ndTransfer;
        l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          	l_strStepReturnValueAspiration = arrRetValues[2];
        }
        l_fltVolumeAspiration = i_fltVolume1stTransfer + i_fltVolume2ndTransfer;
        if (i_fltDispenseHeightFromBottom == 0)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strStepReturnValueDispense = arrRetValues[2];
          }
          _DATA_ComputeVolumeInLabware(ML_STAR, l_seqTempDispensePosition, l_strChannelPattern, l_strStepReturnValueDispense, ASWGLOBAL::BOOL::TRUE, l_arrFltVolumeContainerInMicroliter);
          t_arrFltVolumeContainerInMicroliterDispense = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterDispense, l_arrFltVolumeContainerInMicroliter);
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strStepReturnValueDispense = arrRetValues[2];
          }
        }
        l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReportMPH(l_strStepReturnValueAspiration, l_strStepReturnValueDispense, l_seqTempAspirationPosition, l_seqTempDispensePosition, ASWGLOBAL::BOOL::FALSE);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
      else
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Dispense Mode"));
        _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported dispense mode detected."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    if (t_intPlatformType == 0)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_GetDetectedVolumes( variable & o_arrFltVolumesAspirationSequence[], variable & o_arrFltVolumesDispenseSequence[] ) variable {
    private variable l_strComment;
    o_arrFltVolumesAspirationSequence.SetSize( 0);
    o_arrFltVolumesDispenseSequence.SetSize( 0);
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    o_arrFltVolumesAspirationSequence = HSLExtensions::Array::Copy(t_arrFltVolumeContainerInMicroliterAspiration);
    o_arrFltVolumesDispenseSequence = HSLExtensions::Array::Copy(t_arrFltVolumeContainerInMicroliterDispense);
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("o_arrFltVolumesAspirationSequence"), Translate("o_arrFltVolumesDispenseSequence"), o_arrFltVolumesAspirationSequence, o_arrFltVolumesDispenseSequence);
    t_arrFltVolumeContainerInMicroliterAspiration.SetSize(0);
    t_arrFltVolumeContainerInMicroliterDispense.SetSize(0);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_CheckChannelPattern( variable i_strChannelPatternTipPickUPAndEject, sequence i_controllingSequence, variable & o_strChannelPatternTransferStep ) variable {
    private variable l_strNewChannelPattern;
    private variable l_intIndexActivatedChannel;
    private variable l_intRemainingPositions;
    private variable l_intIndexDeactivatedChannel;
    private variable l_intDeactivatedChannels;
    private variable l_intNumberOfActivatedChannels;
    o_strChannelPatternTransferStep = 0;
    if ( i_controllingSequence.GetCurrentPosition() == 0 ) l_intRemainingPositions = 0;
    else l_intRemainingPositions = i_controllingSequence.GetCount() - i_controllingSequence.GetCurrentPosition() + 1;
    l_intNumberOfActivatedChannels = StrReplace(i_strChannelPatternTipPickUPAndEject, Translate("1"), Translate("1"));
    l_intDeactivatedChannels = l_intNumberOfActivatedChannels - l_intRemainingPositions;
    l_strNewChannelPattern = Translate("");
    if (l_intNumberOfActivatedChannels > l_intRemainingPositions)
    {
      {
        for(l_intIndexActivatedChannel = 0; l_intIndexActivatedChannel < l_intRemainingPositions;)
        {
          l_intIndexActivatedChannel = l_intIndexActivatedChannel + 1;
          l_strNewChannelPattern = l_strNewChannelPattern + "1";
        }
      }
      {
        for(l_intIndexDeactivatedChannel = 0; l_intIndexDeactivatedChannel < l_intDeactivatedChannels;)
        {
          l_intIndexDeactivatedChannel = l_intIndexDeactivatedChannel + 1;
          l_strNewChannelPattern = l_strNewChannelPattern + "0";
        }
      }
      o_strChannelPatternTransferStep = l_strNewChannelPattern;
    }
    else
    {
      o_strChannelPatternTransferStep = i_strChannelPatternTipPickUPAndEject;
    }
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("Number of remaining sequence positions "), l_intRemainingPositions, Translate(", Number of active channels within current pattern "), l_intNumberOfActivatedChannels, Translate(", Number of channels to be deactivated "), l_intDeactivatedChannels, Translate(". ChannelPattern IN "), i_strChannelPatternTipPickUPAndEject, Translate(". ChannelPattern OUT "), o_strChannelPatternTransferStep);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_MPH_MixOnly( device & ML_STAR, sequence i_seqMixingPosition, variable i_fltAspirateHeightFromBottom, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltMixingVolume, variable i_blnPerformMixWithcLLDandFixheight, variable i_blnUse96XTipsInsteadOfNumberPerSamplesXTips ) variable {
    private variable l_strComment;
    private variable l_strVolume;
    private variable l_intTotalColumns;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strChannelPattern;
    private variable l_blnSuccess;
    private variable l_strStepReturnValueAspiration;
    private variable l_intCurrentDispenseMode;
    private variable l_strTypeOfLabware;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intCurrentTipType;
    private variable l_strTipCounterNameIntermediate;
    private variable l_intVolumeMixPerChannelMin;
    private variable l_intIndexFindSubstring;
    private variable l_intVolumeMixPerChannelMax;
    private variable o_strTrimmedVolume;
    private variable l_strCurrentDispenseMode;
    private variable l_strInformationToBeUpdated;
    private variable l_intVolumeMaxTip;
    private variable l_intVolumeMixPerChannel;
    private sequence l_seqControllingMixingDispense;
    private variable l_arrFltVolumeContainerInMicroliter[];
    private variable l_intVolumeMix;
    private variable l_fltCurrentVolume;
    private variable l_fltVolumeMixPerChannel;
    private variable l_intRemainingSequencePositions;
    private variable l_fltVolumeMixPerChannelTrimmed;
    private variable l_intSizeOfArray;
    private variable l_blnTrimmedVolumeMax;
    private sequence l_seqAspirationPositionSelectedLabware;
    private variable l_intTotalRows;
    private variable l_intNumberOfSamplesAdjustedToFullRows;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqMixingPosition);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqMixingPosition);
    if (i_blnPerformMixWithcLLDandFixheight == ASWGLOBAL::BOOL::TRUE)
    {
      l_strVolume = StrFStr(i_fltMixingVolume);
      l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
      l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
      o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
      l_strInformationToBeUpdated = StrConcat8(Translate("1st mix reagents at fix height"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfSourceSequence, Translate(". Initial mix volume :"), o_strTrimmedVolume, Translate(" µl. 2nd mix at cLLD with automatic volume."));
    }
    else
    {
      if (i_fltAspirateHeightFromBottom == 0)
      {
        o_strTrimmedVolume = Translate(" automated calculated by aspiration step");
        l_strInformationToBeUpdated = StrConcat8(Translate("Mix reagents"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfSourceSequence, Translate(". Mix volume defined by measurement."), Translate(""), Translate(""));
      }
      else
      {
        l_strVolume = StrFStr(i_fltMixingVolume);
        l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
        l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
        o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
        l_strInformationToBeUpdated = StrConcat8(Translate("Mix reagents at fix height"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfSourceSequence, Translate(". Initial mix volume "), o_strTrimmedVolume, Translate(" µl."));
      }
    }
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    _DATA_SetRackVisibility(i_seqMixingPosition, ML_STAR);
    MECC::TraceComment("Group start - Create mixing sequences.\nJust 1 labware type is supported.\nIndividual number of position IDs will be ignored - reference sequences applied instead.");
    SeqRemoveAll(l_seqAspirationPositionSelectedLabware);
    if (i_blnUse96XTipsInsteadOfNumberPerSamplesXTips == ASWGLOBAL::BOOL::TRUE)
    {
      DevGetSequence(ML_STAR, l_strLabwareIDOfSourceSequence, l_seqAspirationPositionSelectedLabware);
    }
    else
    {
      if (t_intMPH96TipPickUpSide <= 1)
      {
        _DATA_MPH_ProvideSequenceFullColumns(i_seqMixingPosition, l_seqAspirationPositionSelectedLabware);
      }
      else
      {
        _DATA_MPH_ProvideSequenceFullRows(i_seqMixingPosition, l_seqAspirationPositionSelectedLabware);
      }
    }
    l_seqAspirationPositionSelectedLabware.SetCurrentPosition(1);
    if ( l_seqAspirationPositionSelectedLabware.GetCurrentPosition() == 0 ) l_intRemainingSequencePositions = 0;
    else l_intRemainingSequencePositions = l_seqAspirationPositionSelectedLabware.GetCount() - l_seqAspirationPositionSelectedLabware.GetCurrentPosition() + 1;
    if (t_intMPH96TipPickUpSide <= 1)
    {
      l_intTotalColumns = l_intRemainingSequencePositions / 8;
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intTotalColumns "), l_intTotalColumns);
      _DATA_ChannelPatternMPH96Columns(l_intTotalColumns, t_intMPH96TipPickUpSide, l_strChannelPattern);
    }
    else
    {
      l_intNumberOfSamplesAdjustedToFullRows = l_seqAspirationPositionSelectedLabware.GetCount();
      l_intTotalRows = l_intNumberOfSamplesAdjustedToFullRows / 12;
      _DATA_ChannelPatternMPH96Rows(l_intTotalRows, t_intMPH96TipPickUpSide, l_strChannelPattern);
    }
    MECC::TraceComment(Translate("Input sequence to be mixed"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, i_seqMixingPosition);
    MECC::TraceComment(Translate("Generated sequence applied to be mixed"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, l_seqAspirationPositionSelectedLabware);
    MECC::TraceComment("Group end - Create mixing sequences.\nJust 1 labware type is supported.\nIndividual number of position IDs will be ignored - reference sequences applied instead.");
    _DATA_InterpreteLabwareID(ML_STAR, i_seqMixingPosition, l_strTypeOfLabware);
    if (l_strTypeOfLabware == "tube")
    {
      MECC::TraceComment(Translate("WRONG LABWARE TYPE DETECTED"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Labware Type (tube)"));
      _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported Labware Type (tube) detected."));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
    if (l_intCurrentDispenseMode == 2)
    {
      l_strCurrentDispenseMode = Translate("Part");
    }
    else
    {
      if (l_intCurrentDispenseMode == 4)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        l_strCurrentDispenseMode = Translate("Empty");
      }
    }
    if (l_strCurrentDispenseMode != "Empty")
    {
      MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Dispense Mode"));
      _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported dispense mode detected."));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (l_intCurrentTipType == 1)
    {
      l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
      l_intVolumeMaxTip = 300;
      l_intVolumeMixPerChannelMax = 225;
      l_intVolumeMixPerChannelMin = 15;
    }
    if (l_intCurrentTipType == 5)
    {
      l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
      l_intVolumeMaxTip = 1000;
      l_intVolumeMixPerChannelMax = 750;
      l_intVolumeMixPerChannelMin = 20;
    }
    if (l_intCurrentTipType == 23)
    {
      l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
      l_intVolumeMaxTip = 50;
      l_intVolumeMixPerChannelMax = 37.5;
      l_intVolumeMixPerChannelMin = 5;
    }
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      l_blnTrimmedVolumeMax = ASWGLOBAL::BOOL::FALSE;
      if (t_intMPH96TipPickUpSide <= 1)
      {
        l_blnSuccess = _PickUpTipsMPH96Columns(ML_STAR, l_strTipCounterNameIntermediate, l_intTotalColumns, t_intMPH96TipPickUpSide);
      }
      else
      {
        l_blnSuccess = _PickUpTipsMPH96Rows(ML_STAR, l_strTipCounterNameIntermediate, l_intTotalRows, t_intMPH96TipPickUpSide);
      }
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      if (i_blnPerformMixWithcLLDandFixheight == ASWGLOBAL::BOOL::TRUE)
      {
        if (i_fltAspirateHeightFromBottom == 0)
        {
          i_fltAspirateHeightFromBottom = 0.5;
        }
      }
      if (i_fltAspirateHeightFromBottom > 0)
      {
        MECC::TraceComment(Translate("Mixing performed at fix height, liquid following switched off, volumes applied by input parameter"));
        if (l_strTypeOfLabware == "trough")
        {
          l_fltVolumeMixPerChannel = i_fltMixingVolume / (l_intRemainingSequencePositions * 1.0);
        }
        else
        {
          l_fltVolumeMixPerChannel = i_fltMixingVolume;
        }
        if (l_fltVolumeMixPerChannel > l_intVolumeMixPerChannelMax)
        {
          MECC::TraceComment(Translate("Mix volume limited to max 75% of current tip capacity"));
          l_fltVolumeMixPerChannel = l_intVolumeMixPerChannelMax;
          l_blnTrimmedVolumeMax = ASWGLOBAL::BOOL::TRUE;
          l_fltVolumeMixPerChannelTrimmed = l_fltVolumeMixPerChannel;
        }
        if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
        {
          l_fltVolumeMixPerChannel = l_intVolumeMixPerChannelMax;
        }
        if (l_intVolumeMixPerChannel < 0)
        {
          l_fltVolumeMixPerChannel = l_intVolumeMixPerChannelMin;
          MECC::TraceComment(Translate("300 ul tips used - low volume detected - leading to a negative mixing volume by accident - overwritten to a small volume to mix "));
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          	l_strStepReturnValueAspiration = arrRetValues[2];
        }
      }
      if (i_blnPerformMixWithcLLDandFixheight == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment(Translate("Mixing with both options is selected (fix height and cLLD) - fix height will be performed first followed by cLLD.\ncLLD is triggered by fix height = 0. Manipulation of orig input parameter performed to activate cLLD."));
        i_fltAspirateHeightFromBottom = 0;
      }
      if (i_fltAspirateHeightFromBottom == 0)
      {
        MECC::TraceComment(Translate("Mixing performed using clld, liquid following switched on, volumes automatically calculated"));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          	l_strStepReturnValueAspiration = arrRetValues[2];
        }
        _DATA_ComputeVolumeInLabware(ML_STAR, l_seqAspirationPositionSelectedLabware, l_strChannelPattern, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::TRUE, l_arrFltVolumeContainerInMicroliter);
        t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Copy(l_arrFltVolumeContainerInMicroliter);
        TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("t_arrFltVolumeContainerInMicroliterAspiration "), t_arrFltVolumeContainerInMicroliterAspiration);
        l_intSizeOfArray=l_arrFltVolumeContainerInMicroliter.GetSize();
        l_fltCurrentVolume=l_arrFltVolumeContainerInMicroliter.GetAt(1-1);
        l_intVolumeMix = l_fltCurrentVolume * 0.75;
        if (l_strTypeOfLabware == "trough")
        {
          l_fltVolumeMixPerChannel = i_fltMixingVolume / (l_intRemainingSequencePositions * 1.0);
        }
        else
        {
          l_fltVolumeMixPerChannel = l_intVolumeMix;
        }
        if (l_fltVolumeMixPerChannel > l_intVolumeMixPerChannelMax)
        {
          MECC::TraceComment(Translate("Mix volume limited to max 75% of current tip capacity"));
          l_fltVolumeMixPerChannel = l_intVolumeMixPerChannelMax;
          l_blnTrimmedVolumeMax = ASWGLOBAL::BOOL::TRUE;
          l_fltVolumeMixPerChannelTrimmed = l_fltVolumeMixPerChannel;
        }
        if (t_blnSimulationModeON == ASWGLOBAL::BOOL::TRUE)
        {
          l_fltVolumeMixPerChannel = l_intVolumeMixPerChannelMax;
        }
        if (l_intVolumeMixPerChannel < 0)
        {
          l_fltVolumeMixPerChannel = l_intVolumeMixPerChannelMin;
          MECC::TraceComment(Translate("300 ul tips used - low volume detected - leading to a negative mixing volume by accident - overwritten to a small volume to mix "));
        }
        l_strInformationToBeUpdated = StrConcat4(Translate("Mixing volume applied to current tip type : "), l_fltVolumeMixPerChannel, Translate(" µl ."), Translate(""));
        l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          	l_strStepReturnValueAspiration = arrRetValues[2];
        }
      }
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReportMPH(l_strStepReturnValueAspiration, l_strStepReturnValueAspiration, l_seqAspirationPositionSelectedLabware, l_seqControllingMixingDispense, ASWGLOBAL::BOOL::TRUE);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    if (t_intPlatformType == 0)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _PickUpTipsMPH96Rows( device & ML_STAR, variable i_strTipCounterName, variable i_intNumberOfRows, variable i_intMphPickUpSide ) variable {
    private variable l_blnSuccess;
    private variable loopCounter1;
    private variable l_strStepRecoveryDetails;
    private variable l_strMessageInsufficientTips;
    private variable l_intReturnValueATML;
    if (i_intMphPickUpSide == TIP_TOOLS::MphPickUpSide::TipPickUpWithLeftSideOfMph)
    {
      MECC::TraceComment(Translate("WRONG TIP PICK UP SIDE OF MPH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Wrong Tip Pick Up Side :TipPickUpWithLeftSideOfMph"));
      _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Wrong Tip Pick Up Side detected."));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (i_intMphPickUpSide == TIP_TOOLS::MphPickUpSide::TipPickUpWithRightSideOfMph)
    {
      MECC::TraceComment(Translate("WRONG TIP PICK UP SIDE OF MPH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Wrong Tip Pick Up Side TipPickUpWithRightSideOfMph"));
      _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Wrong Tip Pick Up Side detected."));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_intReturnValueATML = TIPMANAGEMENTLIBRARY::MPH96_PickUpTipsRow(ML_STAR, i_strTipCounterName, i_intNumberOfRows, i_intMphPickUpSide, l_strStepRecoveryDetails);
    if (l_intReturnValueATML == 2001)
    {
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      l_intReturnValueATML = TIPMANAGEMENTLIBRARY::Edit_ShowTipEditDialog(ML_STAR, i_strTipCounterName, 0, 0);
      l_intReturnValueATML = TIPMANAGEMENTLIBRARY::MPH96_PickUpTipsRow(ML_STAR, i_strTipCounterName, i_intNumberOfRows, i_intMphPickUpSide, l_strStepRecoveryDetails);
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_12 ;
          err.Clear();
          break;
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          errLabel_12 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_strMessageInsufficientTips = StrConcat4(Translate("Insufficient tips detected. Reload tips of type : "), Translate("\n"), i_strTipCounterName, Translate(" ."));
            VectorCustomDialogs::MessageDialog(Translate("Tip Management"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, l_strMessageInsufficientTips);
          }   /* end if from skip handler if no error */
        }
      }
    }
    l_blnSuccess = _DATA_TranslateTipManagementErrorCodes(l_intReturnValueATML);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_ChannelPatternMPH96Rows( variable i_intNumberOfRows, variable i_intMphPickUpSide, variable & o_strChannelPatternMPH96 ) void {
    private variable l_intIndexChannelPattern;
    private variable loopCounter1;
    private variable l_strChannelPatternMPH96Row;
    o_strChannelPatternMPH96 = 0;
    o_strChannelPatternMPH96 = Translate("");
    l_strChannelPatternMPH96Row = Translate("");
    {
      for(loopCounter1 = 0; loopCounter1 < 12;)
      {
        loopCounter1 = loopCounter1 + 1;
        {
          for(l_intIndexChannelPattern = 0; l_intIndexChannelPattern < i_intNumberOfRows;)
          {
            l_intIndexChannelPattern = l_intIndexChannelPattern + 1;
            l_strChannelPatternMPH96Row = StrConcat2(l_strChannelPatternMPH96Row, Translate("1"));
          }
        }
        if (i_intMphPickUpSide == TIP_TOOLS::MphPickUpSide::TipPickUpWithTopSideOfMph)
        {
          StrFillRight(l_strChannelPatternMPH96Row, Translate("0"), 8);
        }
        if (i_intMphPickUpSide == TIP_TOOLS::MphPickUpSide::TipPickUpWithBottomSideOfMph)
        {
          StrFillLeft(l_strChannelPatternMPH96Row, Translate("0"), 8);
        }
        o_strChannelPatternMPH96 = StrConcat2(o_strChannelPatternMPH96, l_strChannelPatternMPH96Row);
        l_strChannelPatternMPH96Row = Translate("");
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Generated channel pattern for check volume triggered by number of samples and manipulated to full rows."), o_strChannelPatternMPH96);
  }

  private function _DATA_MPH_ProvideSequenceFullRows( sequence i_seqSequence, sequence & o_seqSequenceTemp ) void {
    private variable l_strRowLetter;
    private variable l_strAlphaNumericPositionID;
    private variable IndexLoop_RowNumber;
    private variable l_strLabwareID;
    private variable l_strGetCurrentPosition;
    private variable IndexLoop_ColumnNumber;
    private variable l_arrLabwareIDs[];
    private variable l_strRowLetterPrevious;
    private variable l_intNumberOfFullRows;
    private variable loopCounter1;
    private variable l_arrRowLetter[];
    private variable l_blnSuccessSorting;
    private variable l_arrRowLetterDistinct[];
    private variable l_arrRowLetterDistinctASC[];
    private variable l_intSequenceEndPosition;
    { sequence __temp; o_seqSequenceTemp = __temp; }
    SeqRemoveAll(o_seqSequenceTemp);
    i_seqSequence.SetCurrentPosition(1);
    l_arrRowLetter.SetSize(0);
    {
      loopCounter1 = 0;
      while (
         (i_seqSequence.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqSequence, 1);
        loopCounter1 = loopCounter1 + 1;
        l_strGetCurrentPosition = SeqGetPositionId(i_seqSequence);
        l_strRowLetter = StrLeft(l_strGetCurrentPosition, 1);
        if (loopCounter1 == 1)
        {
          l_arrRowLetter.AddAsLast(l_strRowLetter);
          l_strRowLetterPrevious = l_strRowLetter;
        }
        else
        {
          if (l_strRowLetter != l_strRowLetterPrevious)
          {
            l_arrRowLetter.AddAsLast(l_strRowLetter);
            l_strRowLetterPrevious = l_strRowLetter;
          }
        }
        SeqIncrement(i_seqSequence, 1);
        if (
           (i_seqSequence.GetCurrentPosition() > 0 && i_seqSequence.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqSequence.SetMax(i_seqSequence.GetTotal());
      i_seqSequence.SetCurrentPosition(1);
    }
    ARRAYTOOLS::get_distinct_from_array(l_arrRowLetter, l_arrRowLetterDistinct);
    l_arrRowLetterDistinctASC = HSLExtensions::Array::Sort(l_arrRowLetterDistinct, 1, l_blnSuccessSorting);
    TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("l_arrRowLetter "), l_arrRowLetter);
    TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("l_arrRowLetterDistinct "), l_arrRowLetterDistinct);
    TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("l_arrRowLetterDistinctASC "), l_arrRowLetterDistinctASC);
    if (l_blnSuccessSorting == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfFullRows=l_arrRowLetterDistinctASC.GetSize();
    }
    else
    {
      l_intNumberOfFullRows=l_arrRowLetterDistinct.GetSize();
    }
    SeqGetLabwareIds(i_seqSequence, l_arrLabwareIDs);
    l_strLabwareID=l_arrLabwareIDs.GetAt(1-1);
    {
      for(IndexLoop_RowNumber = 0; IndexLoop_RowNumber < l_intNumberOfFullRows;)
      {
        IndexLoop_RowNumber = IndexLoop_RowNumber + 1;
        l_strRowLetter=l_arrRowLetter.GetAt(IndexLoop_RowNumber-1);
        {
          for(IndexLoop_ColumnNumber = 0; IndexLoop_ColumnNumber < 12;)
          {
            IndexLoop_ColumnNumber = IndexLoop_ColumnNumber + 1;
            l_strAlphaNumericPositionID = StrConcat2(l_strRowLetter, IndexLoop_ColumnNumber);
            SeqAdd(o_seqSequenceTemp, l_strLabwareID, l_strAlphaNumericPositionID);
            l_intSequenceEndPosition = o_seqSequenceTemp.GetCount();
            if (l_intSequenceEndPosition == 96)
            {
              MECC::TraceComment(Translate("o_SequenceTemp reached 96 Position IDs --> loop break forced\n"));
              break;
            }
          }
        }
        if (IndexLoop_RowNumber == 8)
        {
          break;
        }
      }
    }
    o_seqSequenceTemp.SetCurrentPosition(1);
    TRACELEVEL::TraceSequence(Translate("o_seqSequenceTemp: "), o_seqSequenceTemp);
    MECC::TraceComment(Translate("\nInput Sequences "));
    MECC::TraceComment(Translate("\nManipulated Sequences for MPH usage only"));
  }

  private function _DATA_MPH_ProvideSequenceFullColumns( sequence i_seqSequence, sequence & o_seqSequenceTemp ) void {
    private variable l_strRowLetterConcatenation;
    private variable l_strRowLetter;
    private variable l_intNumberOfFullColumns;
    private variable l_strAlphaNumericPositionID;
    private variable IndexLoop_RowNumber;
    private variable l_strLabwareID;
    private variable l_strGetCurrentPosition;
    private variable IndexLoop_ColumnNumber;
    private variable l_arrLabwareIDs[];
    private variable l_intLengthOfString;
    private variable l_intCount;
    private variable l_strColumnNumber;
    private variable loopCounter1;
    private variable l_arrColumnNumber[];
    private variable l_strColumnNumberPrevious;
    private variable l_intRowNumber;
    private variable l_blnSuccessSorting;
    private variable l_arrColumnNumberDistinct[];
    private variable l_arrColumnNumberDistinctASC[];
    private variable l_intSequenceEndPosition;
    { sequence __temp; o_seqSequenceTemp = __temp; }
    SeqRemoveAll(o_seqSequenceTemp);
    i_seqSequence.SetCurrentPosition(1);
    l_arrColumnNumber.SetSize(0);
    {
      loopCounter1 = 0;
      while (
         (i_seqSequence.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqSequence, 1);
        loopCounter1 = loopCounter1 + 1;
        l_strGetCurrentPosition = SeqGetPositionId(i_seqSequence);
        l_intLengthOfString = StrGetLength(l_strGetCurrentPosition);
        l_intCount = l_intLengthOfString - 1;
        l_strColumnNumber = StrRight(l_strGetCurrentPosition, l_intCount);
        if (loopCounter1 == 1)
        {
          l_arrColumnNumber.AddAsLast(l_strColumnNumber);
          l_strColumnNumberPrevious = l_strColumnNumber;
        }
        else
        {
          if (l_strColumnNumber != l_strColumnNumberPrevious)
          {
            l_arrColumnNumber.AddAsLast(l_strColumnNumber);
            l_strColumnNumberPrevious = l_strColumnNumber;
          }
        }
        SeqIncrement(i_seqSequence, 1);
        if (
           (i_seqSequence.GetCurrentPosition() > 0 && i_seqSequence.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqSequence.SetMax(i_seqSequence.GetTotal());
      i_seqSequence.SetCurrentPosition(1);
    }
    ARRAYTOOLS::get_distinct_from_array(l_arrColumnNumber, l_arrColumnNumberDistinct);
    l_arrColumnNumberDistinctASC = HSLExtensions::Array::Sort(l_arrColumnNumberDistinct, 1, l_blnSuccessSorting);
    TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("l_arrColumnNumber"), l_arrColumnNumber);
    TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("l_arrColumnNumberDistinct"), l_arrColumnNumberDistinct);
    TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("ll_arrColumnNumberDistinctASC "), l_arrColumnNumberDistinctASC);
    if (l_blnSuccessSorting == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfFullColumns=l_arrColumnNumberDistinctASC.GetSize();
    }
    else
    {
      l_intNumberOfFullColumns=l_arrColumnNumberDistinct.GetSize();
    }
    SeqGetLabwareIds(i_seqSequence, l_arrLabwareIDs);
    l_strLabwareID=l_arrLabwareIDs.GetAt(1-1);
    {
      for(IndexLoop_ColumnNumber = 0; IndexLoop_ColumnNumber < l_intNumberOfFullColumns;)
      {
        IndexLoop_ColumnNumber = IndexLoop_ColumnNumber + 1;
        l_strColumnNumber=l_arrColumnNumber.GetAt(IndexLoop_ColumnNumber-1);
        l_intRowNumber = 0;
        l_strRowLetterConcatenation = Translate("ABCDEFGH");
        {
          for(IndexLoop_RowNumber = 0; IndexLoop_RowNumber < 8;)
          {
            IndexLoop_RowNumber = IndexLoop_RowNumber + 1;
            l_strRowLetter = StrMid(l_strRowLetterConcatenation, l_intRowNumber, 1);
            l_intRowNumber = l_intRowNumber + 1;
            l_strAlphaNumericPositionID = StrConcat2(l_strRowLetter, l_strColumnNumber);
            SeqAdd(o_seqSequenceTemp, l_strLabwareID, l_strAlphaNumericPositionID);
            l_intSequenceEndPosition = o_seqSequenceTemp.GetCount();
            if (l_intSequenceEndPosition == 96)
            {
              MECC::TraceComment(Translate("o_SequenceTemp reached 96 Position IDs --> loop break forced\n"));
              break;
            }
          }
        }
      }
    }
    o_seqSequenceTemp.SetCurrentPosition(1);
    MECC::TraceComment(Translate("\nManipulated Sequences for MPH usage only"));
    TRACELEVEL::TraceSequence(t_intTraceLevel, o_seqSequenceTemp);
  }

  function PIP_MPH_StampAdvance( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense ) variable {
    private variable l_intPositionsAspiration;
    private variable l_strComment;
    private variable l_strVolume;
    private variable l_intTotalColumns;
    private variable l_intTotalRows;
    private variable l_strStepReturnValueDispense;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strChannelPattern;
    private variable l_blnSuccess;
    private variable l_strStepReturnValueAspiration;
    private variable l_intMixCycleAspiration;
    private variable l_intNumberOfSamplesAdjustedToFullRows;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intCurrentDispenseMode;
    private variable l_intCurrentTipType;
    private variable l_strTipCounterNameIntermediate;
    private variable l_intMixCycleDispense;
    private variable l_intIndexFindSubstring;
    private variable loopCounter1;
    private variable o_strTrimmedVolume;
    private variable l_intNumberOfLoops;
    private variable l_intNumberOfSamplesAdjustedToFullColumns;
    private variable l_strCurrentDispenseMode;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strInformationToBeUpdated;
    private variable l_intPositionsDispense;
    private sequence l_seqTempAspirationPosition;
    private sequence l_seqTempDispensePosition;
    private variable l_arrFltVolumeContainerInMicroliter[];
    private dialog dialogHandle1;
    private variable l_strPositionID;
    private variable l_intCurrentPosition;
    private variable loopCounter2;
    private variable l_arr_strPositionIDDuplicates[];
    private variable l_arr_strPositionID[];
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_intCurrentPosition = i_seqAspirationPosition.GetCurrentPosition();
    l_arr_strPositionID.SetSize(0);
    {
      loopCounter2 = 0;
      i_seqAspirationPosition.SetCurrentPosition(1);
      while (
         (i_seqAspirationPosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqAspirationPosition, 1);
        loopCounter2 = loopCounter2 + 1;
        l_strPositionID = SeqGetPositionId(i_seqAspirationPosition);
        l_arr_strPositionID.AddAsLast(l_strPositionID);
        SeqIncrement(i_seqAspirationPosition, 1);
        if (
           (i_seqAspirationPosition.GetCurrentPosition() > 0 && i_seqAspirationPosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
      i_seqAspirationPosition.SetCurrentPosition(1);
    }
    i_seqAspirationPosition.SetCurrentPosition(l_intCurrentPosition);
    l_arr_strPositionIDDuplicates = HSLExtensions::Array::ContainsDuplicates(l_arr_strPositionID);
    if(0){
      if ( i_seqAspirationPosition.GetCurrentPosition() == 0 ) l_intPositionsAspiration = 0;
      else l_intPositionsAspiration = i_seqAspirationPosition.GetCount() - i_seqAspirationPosition.GetCurrentPosition() + 1;
    }
    if ( i_seqDispensePosition.GetCurrentPosition() == 0 ) l_intPositionsDispense = 0;
    else l_intPositionsDispense = i_seqDispensePosition.GetCount() - i_seqDispensePosition.GetCurrentPosition() + 1;
    l_intNumberOfLoops=l_arr_strPositionIDDuplicates.GetSize();
    if(0){
      l_intNumberOfLoops = l_intPositionsDispense / l_intNumberOfLoops;
      TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
      TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
      dialogHandle1.SetOutput(l_intNumberOfLoops);
      dialogHandle1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
      TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    }
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strVolume = StrFStr(i_fltVolume);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents using MPH"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnSuccess = _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
    _DATA_SetRackVisibility(i_seqAspirationPosition, ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_blnSuccess = _DATA_PlausibilityCheckVolume(i_fltVolume, l_intCurrentTipType);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (t_intMPH96TipPickUpSide <= 1)
      {
        MECC::TraceComment(Translate("tip pick up side is defined to pick up columns"));
        if(0){
          _DATA_MPH_ProvideSequenceFullColumns(i_seqAspirationPosition, l_seqTempAspirationPosition);
          TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, l_seqTempAspirationPosition);
          _DATA_MPH_ProvideSequenceFullColumns(i_seqDispensePosition, l_seqTempDispensePosition);
          TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, l_seqTempDispensePosition);
          if ( l_seqTempAspirationPosition.GetCurrentPosition() == 0 ) l_intNumberOfSamplesAdjustedToFullColumns = 0;
          else l_intNumberOfSamplesAdjustedToFullColumns = l_seqTempAspirationPosition.GetCount() - l_seqTempAspirationPosition.GetCurrentPosition() + 1;
        }
        l_intNumberOfSamplesAdjustedToFullColumns = i_seqAspirationPosition.GetCount();
        l_intTotalColumns = l_intNumberOfSamplesAdjustedToFullColumns / 8;
        _DATA_ChannelPatternMPH96Columns(l_intTotalColumns, t_intMPH96TipPickUpSide, l_strChannelPattern);
      }
      else
      {
        MECC::TraceComment(Translate("tip pick up side is defined to pick up rows"));
        _DATA_MPH_ProvideSequenceFullRows(i_seqAspirationPosition, l_seqTempAspirationPosition);
        _DATA_MPH_ProvideSequenceFullRows(i_seqDispensePosition, l_seqTempDispensePosition);
        if(0){
          if ( l_seqTempAspirationPosition.GetCurrentPosition() == 0 ) l_intNumberOfSamplesAdjustedToFullRows = 0;
          else l_intNumberOfSamplesAdjustedToFullRows = l_seqTempAspirationPosition.GetCount() - l_seqTempAspirationPosition.GetCurrentPosition() + 1;
        }
        l_intNumberOfSamplesAdjustedToFullRows = l_seqTempAspirationPosition.GetCount();
        l_intTotalRows = l_intNumberOfSamplesAdjustedToFullRows / 12;
        _DATA_ChannelPatternMPH96Rows(l_intTotalRows, t_intMPH96TipPickUpSide, l_strChannelPattern);
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        {
          loopCounter1 = 0;
          i_seqDispensePosition.SetCurrentPosition(1);
          while (
             (i_seqDispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seqDispensePosition, 1);
            loopCounter1 = loopCounter1 + 1;
            if (i_fltVolumeMixDispense == 0)
            {
              l_intMixCycleDispense = 0;
            }
            else
            {
              l_intMixCycleDispense = i_intMixCycles;
            }
            if (i_fltVolumeMixAspiration == 0)
            {
              l_intMixCycleAspiration = 0;
            }
            else
            {
              l_intMixCycleAspiration = i_intMixCycles;
            }
            if (l_intCurrentTipType == 5)
            {
              l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
            }
            if (l_intCurrentTipType == 1)
            {
              l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
            }
            if (l_intCurrentTipType == 23)
            {
              l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
            }
            if(0){
              ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
              TIPMANAGEMENTLIBRARY::Edit_UpdateTipSequence(t_seqTipSupport, l_strTipCounterNameIntermediate);
            }
            if (t_intMPH96TipPickUpSide <= 1)
            {
              l_blnSuccess = _PickUpTipsMPH96Columns(ML_STAR, l_strTipCounterNameIntermediate, l_intTotalColumns, t_intMPH96TipPickUpSide);
            }
            else
            {
              l_blnSuccess = _PickUpTipsMPH96Rows(ML_STAR, l_strTipCounterNameIntermediate, l_intTotalRows, t_intMPH96TipPickUpSide);
            }
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            if (i_fltAspirateHeightFromBottom == 0)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
              if(0){
                _DATA_ComputeVolumeInLabware(ML_STAR, l_seqTempAspirationPosition, l_strChannelPattern, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::TRUE, l_arrFltVolumeContainerInMicroliter);
                t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Copy(l_arrFltVolumeContainerInMicroliter);
              }
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
            }
            if (i_fltDispenseHeightFromBottom == 0)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_ComputeVolumeInLabware(ML_STAR, l_seqTempDispensePosition, l_strChannelPattern, l_strStepReturnValueDispense, ASWGLOBAL::BOOL::TRUE, l_arrFltVolumeContainerInMicroliter);
              t_arrFltVolumeContainerInMicroliterDispense = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterDispense, l_arrFltVolumeContainerInMicroliter);
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
            }
            ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
            l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReportMPH(l_strStepReturnValueAspiration, l_strStepReturnValueDispense, l_seqTempAspirationPosition, l_seqTempDispensePosition, ASWGLOBAL::BOOL::FALSE);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            if (
               (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
          i_seqDispensePosition.SetCurrentPosition(1);
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Dispense Mode"));
        _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported dispense mode detected."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    if (t_intPlatformType == 0)
    {
      if(0){
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_MPH_TipControl( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_blnPickUpTips, variable i_blnEjectTips ) variable {
    private variable l_strVolume;
    private variable l_strComment;
    private variable l_intTotalColumns;
    private variable l_intTotalRows;
    private variable l_strStepReturnValueDispense;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strChannelPattern;
    private variable l_blnSuccess;
    private variable l_strStepReturnValueAspiration;
    private variable l_intMixCycleAspiration;
    private variable l_intNumberOfSamplesAdjustedToFullRows;
    private variable l_intCurrentDispenseMode;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intCurrentTipType;
    private variable l_strTipCounterNameIntermediate;
    private variable l_intMixCycleDispense;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    private variable l_strCurrentDispenseMode;
    private variable l_intNumberOfSamplesAdjustedToFullColumns;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strInformationToBeUpdated;
    private sequence l_seqTempAspirationPosition;
    private sequence l_seqTempDispensePosition;
    private variable l_arrFltVolumeContainerInMicroliter[];
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strVolume = StrFStr(i_fltVolume);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents using MPH"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnSuccess = _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
    _DATA_SetRackVisibility(i_seqAspirationPosition, ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_blnSuccess = _DATA_PlausibilityCheckVolume(i_fltVolume, l_intCurrentTipType);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        if (t_intMPH96TipPickUpSide <= 1)
        {
          MECC::TraceComment(Translate("tip pick up side is defined to pick up columns"));
          _DATA_MPH_ProvideSequenceFullColumns(i_seqAspirationPosition, l_seqTempAspirationPosition);
          _DATA_MPH_ProvideSequenceFullColumns(i_seqDispensePosition, l_seqTempDispensePosition);
          l_intNumberOfSamplesAdjustedToFullColumns = l_seqTempAspirationPosition.GetCount();
          l_intTotalColumns = l_intNumberOfSamplesAdjustedToFullColumns / 8;
          _DATA_ChannelPatternMPH96Columns(l_intTotalColumns, t_intMPH96TipPickUpSide, l_strChannelPattern);
        }
        else
        {
          MECC::TraceComment(Translate("tip pick up side is defined to pick up rows"));
          _DATA_MPH_ProvideSequenceFullRows(i_seqAspirationPosition, l_seqTempAspirationPosition);
          _DATA_MPH_ProvideSequenceFullRows(i_seqDispensePosition, l_seqTempDispensePosition);
          l_intNumberOfSamplesAdjustedToFullRows = l_seqTempAspirationPosition.GetCount();
          l_intTotalRows = l_intNumberOfSamplesAdjustedToFullRows / 12;
          _DATA_ChannelPatternMPH96Rows(l_intTotalRows, t_intMPH96TipPickUpSide, l_strChannelPattern);
        }
        if (i_fltVolumeMixDispense == 0)
        {
          l_intMixCycleDispense = 0;
        }
        else
        {
          l_intMixCycleDispense = i_intMixCycles;
        }
        if (i_fltVolumeMixAspiration == 0)
        {
          l_intMixCycleAspiration = 0;
        }
        else
        {
          l_intMixCycleAspiration = i_intMixCycles;
        }
        if (l_intCurrentTipType == 5)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
        }
        if (l_intCurrentTipType == 1)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
        }
        if (l_intCurrentTipType == 23)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
        }
        if (i_blnPickUpTips == ASWGLOBAL::BOOL::TRUE)
        {
          if (t_intMPH96TipPickUpSide <= 1)
          {
            l_blnSuccess = _PickUpTipsMPH96Columns(ML_STAR, l_strTipCounterNameIntermediate, l_intTotalColumns, t_intMPH96TipPickUpSide);
          }
          else
          {
            l_blnSuccess = _PickUpTipsMPH96Rows(ML_STAR, l_strTipCounterNameIntermediate, l_intTotalRows, t_intMPH96TipPickUpSide);
          }
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
        if (i_fltAspirateHeightFromBottom == 0)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            	l_strStepReturnValueAspiration = arrRetValues[2];
          }
          _DATA_ComputeVolumeInLabware(ML_STAR, l_seqTempAspirationPosition, l_strChannelPattern, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::TRUE, l_arrFltVolumeContainerInMicroliter);
          t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Copy(l_arrFltVolumeContainerInMicroliter);
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            	l_strStepReturnValueAspiration = arrRetValues[2];
          }
        }
        if (i_fltDispenseHeightFromBottom == 0)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strStepReturnValueDispense = arrRetValues[2];
          }
          _DATA_ComputeVolumeInLabware(ML_STAR, l_seqTempDispensePosition, l_strChannelPattern, l_strStepReturnValueDispense, ASWGLOBAL::BOOL::TRUE, l_arrFltVolumeContainerInMicroliter);
          t_arrFltVolumeContainerInMicroliterDispense = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterDispense, l_arrFltVolumeContainerInMicroliter);
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strStepReturnValueDispense = arrRetValues[2];
          }
        }
        if (i_blnEjectTips == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
        l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReportMPH(l_strStepReturnValueAspiration, l_strStepReturnValueDispense, l_seqTempAspirationPosition, l_seqTempDispensePosition, ASWGLOBAL::BOOL::FALSE);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Dispense Mode"));
        _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported dispense mode detected."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    if (t_intPlatformType == 0)
    {
      if(0){
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_MPH_DoubleAspiration_TipControl( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume1stTransfer, variable i_fltVolume2ndTransfer, variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom1stTransfer, variable i_fltAspirateHeightFromBottom2ndTransfer, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_blnPickUpTips, variable i_blnEjectTips ) variable {
    private variable l_strVolume;
    private variable l_strComment;
    private variable i_fltAspirateHeightFromBottom;
    private variable l_intTotalRows;
    private variable l_intTotalColumns;
    private variable l_strStepReturnValueDispense;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strChannelPattern;
    private variable l_blnSuccess;
    private variable l_strStepReturnValueAspiration;
    private variable l_fltVolumeTotal;
    private variable l_intMixCycleAspiration;
    private variable l_intNumberOfSamplesAdjustedToFullRows;
    private variable l_intCurrentDispenseMode;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intCurrentTipType;
    private variable l_strTipCounterNameIntermediate;
    private variable l_intMixCycleDispense;
    private variable l_fltVolumeAspiration;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    private variable l_strCurrentDispenseMode;
    private variable l_intNumberOfSamplesAdjustedToFullColumns;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strInformationToBeUpdated;
    private sequence l_seqTempAspirationPosition;
    private sequence l_seqTempDispensePosition;
    private variable l_arrFltVolumeContainerInMicroliter[];
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_fltVolumeTotal = i_fltVolume1stTransfer + i_fltVolume2ndTransfer;
    l_strVolume = StrFStr(l_fltVolumeTotal);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents using MPH"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnSuccess = _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    _DATA_SetRackVisibility(i_seqAspirationPosition, ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_blnSuccess = _DATA_PlausibilityCheckVolume(l_fltVolumeTotal, l_intCurrentTipType);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      l_blnSuccess = _DATA_PlausibilityCheckVolume(i_fltVolume1stTransfer, l_intCurrentTipType);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      l_blnSuccess = _DATA_PlausibilityCheckVolume(i_fltVolume2ndTransfer, l_intCurrentTipType);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        if (t_intMPH96TipPickUpSide <= 1)
        {
          MECC::TraceComment(Translate("tip pick up side is defined to pick up columns"));
          _DATA_MPH_ProvideSequenceFullColumns(i_seqAspirationPosition, l_seqTempAspirationPosition);
          _DATA_MPH_ProvideSequenceFullColumns(i_seqDispensePosition, l_seqTempDispensePosition);
          l_intNumberOfSamplesAdjustedToFullColumns = l_seqTempAspirationPosition.GetCount();
          l_intTotalColumns = l_intNumberOfSamplesAdjustedToFullColumns / 8;
          _DATA_ChannelPatternMPH96Columns(l_intTotalColumns, t_intMPH96TipPickUpSide, l_strChannelPattern);
        }
        else
        {
          MECC::TraceComment(Translate("tip pick up side is defined to pick up rows"));
          _DATA_MPH_ProvideSequenceFullRows(i_seqAspirationPosition, l_seqTempAspirationPosition);
          _DATA_MPH_ProvideSequenceFullRows(i_seqDispensePosition, l_seqTempDispensePosition);
          l_intNumberOfSamplesAdjustedToFullRows = l_seqTempAspirationPosition.GetCount();
          l_intTotalRows = l_intNumberOfSamplesAdjustedToFullRows / 12;
          _DATA_ChannelPatternMPH96Rows(l_intTotalRows, t_intMPH96TipPickUpSide, l_strChannelPattern);
        }
        if (i_fltVolumeMixDispense == 0)
        {
          l_intMixCycleDispense = 0;
        }
        else
        {
          l_intMixCycleDispense = i_intMixCycles;
        }
        if (i_fltVolumeMixAspiration == 0)
        {
          l_intMixCycleAspiration = 0;
        }
        else
        {
          l_intMixCycleAspiration = i_intMixCycles;
        }
        if (l_intCurrentTipType == 5)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
        }
        if (l_intCurrentTipType == 1)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
        }
        if (l_intCurrentTipType == 23)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
        }
        if (i_blnPickUpTips == ASWGLOBAL::BOOL::TRUE)
        {
          if (t_intMPH96TipPickUpSide <= 1)
          {
            l_blnSuccess = _PickUpTipsMPH96Columns(ML_STAR, l_strTipCounterNameIntermediate, l_intTotalColumns, t_intMPH96TipPickUpSide);
          }
          else
          {
            l_blnSuccess = _PickUpTipsMPH96Rows(ML_STAR, l_strTipCounterNameIntermediate, l_intTotalRows, t_intMPH96TipPickUpSide);
          }
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
        l_fltVolumeAspiration = i_fltVolume1stTransfer;
        l_strInformationToBeUpdated = StrConcat8(Translate("1st aspiration"), Translate(" : "), l_fltVolumeAspiration, Translate(" µl."), Translate(""), Translate(""), Translate(""), Translate(""));
        l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
        i_fltAspirateHeightFromBottom = i_fltAspirateHeightFromBottom1stTransfer;
        if (i_fltAspirateHeightFromBottom == 0)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            	l_strStepReturnValueAspiration = arrRetValues[2];
          }
          _DATA_ComputeVolumeInLabware(ML_STAR, l_seqTempAspirationPosition, l_strChannelPattern, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::TRUE, l_arrFltVolumeContainerInMicroliter);
          t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Copy(l_arrFltVolumeContainerInMicroliter);
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            	l_strStepReturnValueAspiration = arrRetValues[2];
          }
        }
        l_fltVolumeAspiration = i_fltVolume2ndTransfer;
        l_strInformationToBeUpdated = StrConcat8(Translate("2nd aspiration"), Translate(" : "), l_fltVolumeAspiration, Translate(" µl."), Translate(""), Translate(""), Translate(""), Translate(""));
        i_fltAspirateHeightFromBottom = i_fltAspirateHeightFromBottom2ndTransfer;
        l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          	l_strStepReturnValueAspiration = arrRetValues[2];
        }
        l_fltVolumeAspiration = i_fltVolume1stTransfer + i_fltVolume2ndTransfer;
        if (i_fltDispenseHeightFromBottom == 0)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strStepReturnValueDispense = arrRetValues[2];
          }
          _DATA_ComputeVolumeInLabware(ML_STAR, l_seqTempDispensePosition, l_strChannelPattern, l_strStepReturnValueDispense, ASWGLOBAL::BOOL::TRUE, l_arrFltVolumeContainerInMicroliter);
          t_arrFltVolumeContainerInMicroliterDispense = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterDispense, l_arrFltVolumeContainerInMicroliter);
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strStepReturnValueDispense = arrRetValues[2];
          }
        }
        l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReportMPH(l_strStepReturnValueAspiration, l_strStepReturnValueDispense, l_seqTempAspirationPosition, l_seqTempDispensePosition, ASWGLOBAL::BOOL::FALSE);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
        if (i_blnEjectTips == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Dispense Mode"));
        _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported dispense mode detected."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    if (t_intPlatformType == 0)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_Channels_ExpandedMix( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCyclesAspiration, variable i_intMixCyclesDispense, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_intPrewetCycles ) variable {
    private variable l_strComment;
    private variable l_strVolume;
    private variable l_strChannelPatternTransfer;
    private variable l_blnStringDispenseModeSurfaceEmpty;
    private variable l_strStepReturnValueDispense;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_intMainLoopTransferLiquids;
    private variable l_strChannelPattern;
    private variable l_blnSuccess;
    private variable l_strStepReturnValueAspiration;
    private variable l_intMixCycleAspiration;
    private variable l_strTypeOfLabware;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intCurrentDispenseMode;
    private variable l_strTipCounterNameIntermediate;
    private variable l_intCurrentTipType;
    private variable l_intMixCycleDispense;
    private variable l_fltVolumeMixAspiration;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    private variable l_blnPerformedAdditionalVolumeTransfer;
    private variable l_intNumberOfSamples;
    private variable l_strCurrentDispenseMode;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strInformationToBeUpdated;
    private sequence l_seqAspirationPositionPreselectedTrough;
    private variable l_arrFltVolumeContainerInMicroliter[];
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strVolume = StrFStr(i_fltVolume);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_fltVolume : "), i_fltVolume);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    _DATA_SetRackVisibility(i_seqAspirationPosition, ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_blnStringDispenseModeSurfaceEmpty = StrFind(i_strLiquidClassNameTransfer, Translate("SurfaceEmpty"));
      l_blnSuccess = _DATA_PlausibilityCheckVolume(i_fltVolume, l_intCurrentTipType);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      _DATA_InterpreteLabwareID(ML_STAR, i_seqAspirationPosition, l_strTypeOfLabware);
      l_intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        l_blnSuccess = _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
        MECC::TraceComment(Translate("********** Now pipetting reagents to destination plate"));
        if (l_intCurrentTipType == 1)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
        }
        if (l_intCurrentTipType == 5)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
        }
        if (l_intCurrentTipType == 23)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
        }
        {
          l_intMainLoopTransferLiquids = 0;
          while (
             (i_seqDispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seqDispensePosition, 1, i_seqAspirationPosition, 1);
            l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
            if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              l_strChannelPattern = Translate("");
              l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPattern, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, i_seqDispensePosition);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
            }
            else
            {
              if (l_intMainLoopTransferLiquids == 1)
              {
                l_strChannelPattern = Translate("");
                l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPattern, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, i_seqDispensePosition);
                if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
                {
                  return (ASWGLOBAL::BOOL::FALSE);
                }
              }
            }
            _DATA_CheckChannelPattern(l_strChannelPattern, i_seqDispensePosition, l_strChannelPatternTransfer);
            MECC::TraceComment("Group start - Set Prewet Mixing parameter");
            if (i_intPrewetCycles > 0)
            {
              if (l_intMainLoopTransferLiquids == 1)
              {
                l_intMixCycleAspiration = i_intPrewetCycles;
                l_fltVolumeMixAspiration = i_fltVolume;
              }
            }
            else
            {
              if (i_fltVolumeMixDispense == 0)
              {
                l_intMixCycleDispense = 0;
              }
              else
              {
                l_intMixCycleDispense = i_intMixCyclesDispense;
              }
              if (i_fltVolumeMixAspiration == 0)
              {
                l_intMixCycleAspiration = 0;
              }
              else
              {
                l_intMixCycleAspiration = i_intMixCyclesAspiration;
                l_fltVolumeMixAspiration = i_fltVolumeMixAspiration;
              }
            }
            if (l_intMainLoopTransferLiquids > 1)
            {
              if (i_fltVolumeMixDispense == 0)
              {
                l_intMixCycleDispense = 0;
              }
              else
              {
                l_intMixCycleDispense = i_intMixCyclesDispense;
              }
              if (i_fltVolumeMixAspiration == 0)
              {
                l_intMixCycleAspiration = 0;
              }
              else
              {
                l_intMixCycleAspiration = i_intMixCyclesAspiration;
                l_fltVolumeMixAspiration = i_fltVolumeMixAspiration;
              }
            }
            MECC::TraceComment("Group end - Set Prewet Mixing parameter");
            if (i_fltAspirateHeightFromBottom == 0)
            {
              l_blnSuccess = _DATA_ManageMultipleTroughs(ML_STAR, i_fltVolume, 0, 0, i_seqAspirationPosition, i_strLiquidClassNameTransfer, l_strChannelPatternTransfer, l_blnPerformedAdditionalVolumeTransfer, l_seqAspirationPositionPreselectedTrough);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
              if (l_blnPerformedAdditionalVolumeTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              _DATA_ComputeVolumeInLabware(ML_STAR, l_seqAspirationPositionPreselectedTrough, l_strChannelPatternTransfer, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
              t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterAspiration, l_arrFltVolumeContainerInMicroliter);
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
            }
            if (i_fltDispenseHeightFromBottom == 0)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_ComputeVolumeInLabware(ML_STAR, i_seqDispensePosition, l_strChannelPatternTransfer, l_strStepReturnValueDispense, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
              t_arrFltVolumeContainerInMicroliterDispense = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterDispense, l_arrFltVolumeContainerInMicroliter);
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
            }
            l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPattern);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
            }
            if (i_blnIncrementAspirationSequence == ASWGLOBAL::BOOL::TRUE)
            {
              SeqIncrement(i_seqAspirationPosition, t_intNumberOfAllAvailableChannels);
            }
            SeqIncrement(i_seqDispensePosition, t_intNumberOfAllAvailableChannels);
            if (
               (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
          i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
          i_seqDispensePosition.SetCurrentPosition(1);
          i_seqAspirationPosition.SetCurrentPosition(1);
        }
        if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
        {
          l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPattern);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
      }
      if (l_strCurrentDispenseMode == "Part")
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Dispense Mode"));
        _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported dispense mode detected."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_MPH_TipControl_ExpandedMix( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCyclesAspiration, variable i_intMixCyclesDispense, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_blnPickUpTips, variable i_blnEjectTips ) variable {
    private variable l_strComment;
    private variable l_strVolume;
    private variable l_intTotalRows;
    private variable l_intTotalColumns;
    private variable l_strStepReturnValueDispense;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strChannelPattern;
    private variable l_blnSuccess;
    private variable l_strStepReturnValueAspiration;
    private variable l_intMixCycleAspiration;
    private variable l_intNumberOfSamplesAdjustedToFullRows;
    private variable l_intCurrentDispenseMode;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intCurrentTipType;
    private variable l_strTipCounterNameIntermediate;
    private variable l_intMixCycleDispense;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    private variable l_strCurrentDispenseMode;
    private variable l_intNumberOfSamplesAdjustedToFullColumns;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDOfTargetSequence;
    private sequence l_seqTempAspirationPosition;
    private sequence l_seqTempDispensePosition;
    private variable l_arrFltVolumeContainerInMicroliter[];
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strVolume = StrFStr(i_fltVolume);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents using MPH"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnSuccess = _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
    _DATA_SetRackVisibility(i_seqAspirationPosition, ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      if(0){
        l_blnSuccess = _DATA_PlausibilityCheckVolume(i_fltVolume, l_intCurrentTipType);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        if (t_intMPH96TipPickUpSide <= 1)
        {
          MECC::TraceComment(Translate("tip pick up side is defined to pick up columns"));
          _DATA_MPH_ProvideSequenceFullColumns(i_seqAspirationPosition, l_seqTempAspirationPosition);
          _DATA_MPH_ProvideSequenceFullColumns(i_seqDispensePosition, l_seqTempDispensePosition);
          l_intNumberOfSamplesAdjustedToFullColumns = l_seqTempAspirationPosition.GetCount();
          l_intTotalColumns = l_intNumberOfSamplesAdjustedToFullColumns / 8;
          _DATA_ChannelPatternMPH96Columns(l_intTotalColumns, t_intMPH96TipPickUpSide, l_strChannelPattern);
        }
        else
        {
          MECC::TraceComment(Translate("tip pick up side is defined to pick up rows"));
          _DATA_MPH_ProvideSequenceFullRows(i_seqAspirationPosition, l_seqTempAspirationPosition);
          _DATA_MPH_ProvideSequenceFullRows(i_seqDispensePosition, l_seqTempDispensePosition);
          l_intNumberOfSamplesAdjustedToFullRows = l_seqTempAspirationPosition.GetCount();
          l_intTotalRows = l_intNumberOfSamplesAdjustedToFullRows / 12;
          _DATA_ChannelPatternMPH96Rows(l_intTotalRows, t_intMPH96TipPickUpSide, l_strChannelPattern);
        }
        if (i_fltVolumeMixDispense == 0)
        {
          l_intMixCycleDispense = 0;
        }
        else
        {
          l_intMixCycleDispense = i_intMixCyclesDispense;
        }
        if (i_fltVolumeMixAspiration == 0)
        {
          l_intMixCycleAspiration = 0;
        }
        else
        {
          l_intMixCycleAspiration = i_intMixCyclesAspiration;
        }
        if (l_intCurrentTipType == 5)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
        }
        if (l_intCurrentTipType == 1)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
        }
        if (l_intCurrentTipType == 23)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
        }
        if (i_blnPickUpTips == ASWGLOBAL::BOOL::TRUE)
        {
          if (t_intMPH96TipPickUpSide <= 1)
          {
            l_blnSuccess = _PickUpTipsMPH96Columns(ML_STAR, l_strTipCounterNameIntermediate, l_intTotalColumns, t_intMPH96TipPickUpSide);
          }
          else
          {
            l_blnSuccess = _PickUpTipsMPH96Rows(ML_STAR, l_strTipCounterNameIntermediate, l_intTotalRows, t_intMPH96TipPickUpSide);
          }
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
        if (i_fltAspirateHeightFromBottom == 0)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            	l_strStepReturnValueAspiration = arrRetValues[2];
          }
          _DATA_ComputeVolumeInLabware(ML_STAR, l_seqTempAspirationPosition, l_strChannelPattern, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::TRUE, l_arrFltVolumeContainerInMicroliter);
          t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Copy(l_arrFltVolumeContainerInMicroliter);
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            	l_strStepReturnValueAspiration = arrRetValues[2];
          }
        }
        if (i_fltDispenseHeightFromBottom == 0)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strStepReturnValueDispense = arrRetValues[2];
          }
          _DATA_ComputeVolumeInLabware(ML_STAR, l_seqTempDispensePosition, l_strChannelPattern, l_strStepReturnValueDispense, ASWGLOBAL::BOOL::TRUE, l_arrFltVolumeContainerInMicroliter);
          t_arrFltVolumeContainerInMicroliterDispense = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterDispense, l_arrFltVolumeContainerInMicroliter);
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strStepReturnValueDispense = arrRetValues[2];
          }
        }
        if (i_blnEjectTips == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
        l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReportMPH(l_strStepReturnValueAspiration, l_strStepReturnValueDispense, l_seqTempAspirationPosition, l_seqTempDispensePosition, ASWGLOBAL::BOOL::FALSE);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Dispense Mode"));
        _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported dispense mode detected."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    if (t_intPlatformType == 0)
    {
      if(0){
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_MPH_StampAdvance_ExpandedMix( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCyclesAspiration, variable i_intMixCyclesDispense, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense ) variable {
    private variable l_strVolume;
    private variable l_strComment;
    private variable l_intTotalRows;
    private variable l_intTotalColumns;
    private variable l_strStepReturnValueDispense;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_blnSuccess;
    private variable l_strStepReturnValueAspiration;
    private variable l_strChannelPattern;
    private variable l_intMixCycleAspiration;
    private variable l_intNumberOfSamplesAdjustedToFullRows;
    private variable l_intCurrentDispenseMode;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_strTipCounterNameIntermediate;
    private variable l_intCurrentTipType;
    private variable l_intMixCycleDispense;
    private variable l_intCurrentPosition;
    private variable l_intIndexFindSubstring;
    private variable loopCounter1;
    private variable o_strTrimmedVolume;
    private variable l_strCurrentDispenseMode;
    private variable l_intNumberOfSamplesAdjustedToFullColumns;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDOfTargetSequence;
    private sequence l_seqTempAspirationPosition;
    private sequence l_seqTempDispensePosition;
    private variable l_arrFltVolumeContainerInMicroliter[];
    private variable l_intRows;
    private variable l_intTargetTotal;
    private variable l_intEndPosition;
    private variable l_intSourceTotal;
    private variable l_intColumns;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strVolume = StrFStr(i_fltVolume);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents using MPH"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnSuccess = _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
    _DATA_SetRackVisibility(i_seqAspirationPosition, ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    l_intCurrentPosition = i_seqAspirationPosition.GetCurrentPosition();
    l_intEndPosition = i_seqAspirationPosition.GetCount();
    l_intSourceTotal = l_intEndPosition - l_intCurrentPosition;
    l_intSourceTotal = l_intSourceTotal + 1;
    l_intCurrentPosition = i_seqDispensePosition.GetCurrentPosition();
    l_intEndPosition = i_seqDispensePosition.GetCount();
    l_intTargetTotal = l_intEndPosition - l_intCurrentPosition;
    l_intTargetTotal = l_intTargetTotal + 1;
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_blnSuccess = _DATA_PlausibilityCheckVolume(i_fltVolume, l_intCurrentTipType);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (t_intMPH96TipPickUpSide <= 1)
      {
        MECC::TraceComment(Translate("tip pick up side is defined to pick up columns"));
        if(0){
          _DATA_MPH_ProvideSequenceFullColumns(i_seqAspirationPosition, l_seqTempAspirationPosition);
          TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, l_seqTempAspirationPosition);
          _DATA_MPH_ProvideSequenceFullColumns(i_seqDispensePosition, l_seqTempDispensePosition);
          TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, l_seqTempDispensePosition);
          if ( l_seqTempAspirationPosition.GetCurrentPosition() == 0 ) l_intNumberOfSamplesAdjustedToFullColumns = 0;
          else l_intNumberOfSamplesAdjustedToFullColumns = l_seqTempAspirationPosition.GetCount() - l_seqTempAspirationPosition.GetCurrentPosition() + 1;
          l_intNumberOfSamplesAdjustedToFullColumns = i_seqAspirationPosition.GetCount();
          l_intTotalColumns = l_intNumberOfSamplesAdjustedToFullColumns / 8;
        }
      }
      else
      {
        MECC::TraceComment(Translate("tip pick up side is defined to pick up rows"));
        if(0){
          _DATA_MPH_ProvideSequenceFullRows(i_seqAspirationPosition, l_seqTempAspirationPosition);
          _DATA_MPH_ProvideSequenceFullRows(i_seqDispensePosition, l_seqTempDispensePosition);
          if ( l_seqTempAspirationPosition.GetCurrentPosition() == 0 ) l_intNumberOfSamplesAdjustedToFullRows = 0;
          else l_intNumberOfSamplesAdjustedToFullRows = l_seqTempAspirationPosition.GetCount() - l_seqTempAspirationPosition.GetCurrentPosition() + 1;
          l_intNumberOfSamplesAdjustedToFullRows = l_seqTempAspirationPosition.GetCount();
          l_intTotalRows = l_intNumberOfSamplesAdjustedToFullRows / 12;
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        {
          loopCounter1 = 0;
          i_seqDispensePosition.SetCurrentPosition(1);
          while (
             (i_seqDispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seqDispensePosition, 1);
            loopCounter1 = loopCounter1 + 1;
            if (i_fltVolumeMixDispense == 0)
            {
              l_intMixCycleDispense = 0;
            }
            else
            {
              l_intMixCycleDispense = i_intMixCyclesDispense;
            }
            if (i_fltVolumeMixAspiration == 0)
            {
              l_intMixCycleAspiration = 0;
            }
            else
            {
              l_intMixCycleAspiration = i_intMixCyclesAspiration;
            }
            if (l_intCurrentTipType == 5)
            {
              l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
            }
            if (l_intCurrentTipType == 1)
            {
              l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
            }
            if (l_intCurrentTipType == 23)
            {
              l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
            }
            if (t_intMPH96TipPickUpSide <= 1)
            {
              l_intColumns = l_intTargetTotal % l_intSourceTotal;
              if (l_intColumns > 0)
              {
                l_intTargetTotal = l_intTargetTotal - l_intColumns;
                l_intColumns = l_intColumns / 8;
              }
              else
              {
                l_intColumns = l_intSourceTotal / 8;
              }
              TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("The number of columns needed: "), l_intColumns, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              _DATA_ChannelPatternMPH96Columns(l_intColumns, t_intMPH96TipPickUpSide, l_strChannelPattern);
              l_blnSuccess = _PickUpTipsMPH96Columns(ML_STAR, l_strTipCounterNameIntermediate, l_intColumns, t_intMPH96TipPickUpSide);
            }
            else
            {
              l_intRows = l_intTargetTotal % l_intSourceTotal;
              if (l_intRows > 0)
              {
                l_intTargetTotal = l_intTargetTotal - l_intRows;
                l_intRows = l_intRows / 12;
              }
              else
              {
                l_intRows = l_intSourceTotal / 12;
              }
              TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("The number of rows needed: "), l_intRows, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              _DATA_ChannelPatternMPH96Rows(l_intRows, t_intMPH96TipPickUpSide, l_strChannelPattern);
              l_blnSuccess = _PickUpTipsMPH96Rows(ML_STAR, l_strTipCounterNameIntermediate, l_intRows, t_intMPH96TipPickUpSide);
            }
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            if (i_fltAspirateHeightFromBottom == 0)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
              if(0){
                _DATA_ComputeVolumeInLabware(ML_STAR, l_seqTempAspirationPosition, l_strChannelPattern, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::TRUE, l_arrFltVolumeContainerInMicroliter);
                t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Copy(l_arrFltVolumeContainerInMicroliter);
              }
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
            }
            if (i_fltDispenseHeightFromBottom == 0)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
              if(0){
                _DATA_ComputeVolumeInLabware(ML_STAR, l_seqTempDispensePosition, l_strChannelPattern, l_strStepReturnValueDispense, ASWGLOBAL::BOOL::TRUE, l_arrFltVolumeContainerInMicroliter);
                t_arrFltVolumeContainerInMicroliterDispense = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterDispense, l_arrFltVolumeContainerInMicroliter);
              }
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
            }
            ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
            if(0){
              l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReportMPH(l_strStepReturnValueAspiration, l_strStepReturnValueDispense, l_seqTempAspirationPosition, l_seqTempDispensePosition, ASWGLOBAL::BOOL::FALSE);
            }
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            if (
               (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
          i_seqDispensePosition.SetCurrentPosition(1);
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Dispense Mode"));
        _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported dispense mode detected."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    if (t_intPlatformType == 0)
    {
      if(0){
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_Channels_MixBeadsByOverturn( device & ML_STAR, sequence & io_seqMix, variable i_strLiquidClassName, variable i_intOverturnCycles, variable i_intMixCycles, variable i_fltOverturnVolume, variable i_fltMixVolume, variable i_fltImmersionDepth, variable i_fltMixHeight, variable i_fltAspirationHeight, variable & o_strOutputErrorString ) variable {
    private variable l_str_lv;
    private variable l_str_fp;
    private variable l_intNumberOfChannels;
    private variable l_strPositionID;
    private variable l_intNumberOfPositions;
    private variable l_str_tm;
    private variable l_flt_Z;
    private variable l_str_it;
    private variable l_strMessageText;
    private variable loopCounter8;
    private variable l_strComment;
    private variable _junk;
    private variable l_fltLiqLevelChangeInc;
    private variable l_fltTransAir;
    private variable loopCounter9;
    private variable l_str_mh;
    private variable l_bln_LiqClassError;
    private variable l_strAbortHandlerMessage;
    private variable l_intNumberOfInactiveChannels;
    private variable l_int_DialogResult;
    private variable l_flt_DialogZeroVolume;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_fltDispSettleTime;
    private variable l_blnSuccess;
    private variable l_str_wt;
    private variable l_strChannelPattern;
    private variable l_strCheckVolMessage;
    private variable l_bln_IsSumulation;
    private variable l_str_zx;
    private variable l_str_ds;
    private variable l_strMixVolume;
    private variable l_str_ta;
    private variable l_strTrimmedOverturnVolume;
    private variable l_intRemaining;
    private variable l_fltReturn;
    private variable l_str_ba;
    private variable l_flt_ContainerDepth;
    private variable l_str_ll;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_strParameter;
    private variable l_fltLiqLevelChangeTotal;
    private variable l_fltDispSpeed;
    private variable l_retValueDialog;
    private variable l_flt_ImmersionDepthTest;
    private variable l_str_as;
    private variable l_strTipCounterNameIntermediate;
    private variable lc_MixingCycle;
    private variable l_str_de;
    private variable l_str_lm;
    private variable l_fltVolumeAtLiquidLevel;
    private variable l_intCurrentTipType;
    private variable l_str_dv;
    private variable l_strReturn;
    private variable l_intCurrentPosition;
    private variable l_str_at;
    private variable l_fltAspSpeed;
    private variable l_intIndexFindSubstring;
    private variable l_str_te;
    private variable l_flt_A;
    private variable t_bln_Success;
    private variable l_str_oa;
    private variable l_intEndPosition;
    private variable l_strTrimmedMixVolume;
    private variable l_str_mp;
    private variable l_fltDispSwapSpeed;
    private variable l_str_zl;
    private variable l_fltAspSwapSpeed;
    private variable loopCounter1;
    private variable l_fltVolumeChange;
    private variable l_str_lp;
    private variable l_str_av;
    private variable l_fltBlowoutvol;
    private variable l_str_StepReturn;
    private variable l_str_ch;
    private variable l_fltAspSettleTime;
    private variable l_str_th;
    private variable l_intLoop;
    private variable l_strOverturnVolume;
    private variable l_fltLiqLevelAfterAsp;
    private variable loopCounter3;
    private variable l_str_ms;
    private variable lc_IPAssign;
    private variable l_strInformationToBeUpdated;
    private variable l_intPickedupTipType;
    private variable loopCounter4;
    private variable l_str_ip;
    private variable l_strLabwareID;
    private variable l_str_mc;
    private variable l_fltMixSpeed;
    private variable l_flt_ContainerClearance;
    private variable l_bln_Success;
    private variable l_flt_X;
    private variable l_strBucket;
    private variable l_str_yp;
    private variable l_str_FWAnswer;
    private variable l_blnOutput;
    private variable l_str_ld;
    private variable loopCounter6;
    private variable l_str_dm;
    private variable l_flt_Y;
    private variable l_str_mv;
    private variable l_str_xp;
    private variable l_fltTestVolume;
    private sequence l_seqMix;
    private variable l_arrPositionIDs[];
    private variable l_arrContainer_X[];
    private variable l_arrContainer_Y[];
    private variable l_arrContainer_Z[];
    private variable l_arrContainerClearance[];
    private variable l_arrLabwareIDs[];
    private variable l_arrLiquidLevelSorted[];
    private variable l_arrContainerClearanceSorted[];
    private variable l_arrLiquidLevel[];
    private variable l_arrContainer_Z_mm[];
    private variable l_arrStartVolumes[];
    private dialog customDialog_13;
    private dialog customDialog_14;
    o_strOutputErrorString = 0;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(io_seqMix);
    l_strOverturnVolume = StrFStr(i_fltOverturnVolume);
    l_intIndexFindSubstring = StrFind(l_strOverturnVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    l_strTrimmedOverturnVolume = StrLeft(l_strOverturnVolume, l_intCountCharactersToBeExctrated);
    l_strMixVolume = StrFStr(i_fltMixVolume);
    l_intIndexFindSubstring = StrFind(l_strMixVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    l_strTrimmedMixVolume = StrLeft(l_strMixVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat12(Translate("Mix by Overturn"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), Translate("Overturning "), l_strOverturnVolume, Translate(" µL, "), Translate("Mixing "), l_strMixVolume, Translate(" µL, "), i_intOverturnCycles, Translate(" Cycles"));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      l_flt_ImmersionDepthTest = 0;
      l_bln_IsSumulation = 0;
      t_bln_Success = 0;
      l_intNumberOfChannels = 0;
      l_flt_ContainerClearance = 0;
      l_str_FWAnswer = Translate("");
      l_bln_LiqClassError = 0;
      l_bln_Success = 0;
      l_int_DialogResult = 0;
      l_str_StepReturn = Translate("");
      l_intPickedupTipType = 0;
      l_strMessageText = Translate("");
      l_strCheckVolMessage = Translate("");
      l_strMixVolume = Translate("");
      l_strOverturnVolume = Translate("");
      l_fltTestVolume = 0;
      l_fltVolumeAtLiquidLevel = 0;
      l_fltVolumeChange = 0;
      l_fltLiqLevelAfterAsp = 0;
      l_fltLiqLevelChangeInc = 1;
      l_fltLiqLevelChangeTotal = 0;
      l_strAbortHandlerMessage = Translate("");
      l_flt_DialogZeroVolume = 0.0;
      l_fltBlowoutvol = 0;
      l_fltTransAir = 0;
      l_fltAspSpeed = 0;
      l_fltDispSpeed = 0;
      l_fltMixSpeed = 0;
      l_fltAspSwapSpeed = 0;
      l_fltDispSwapSpeed = 0;
      l_fltAspSettleTime = 0;
      l_fltDispSettleTime = 0;
      l_intCurrentTipType = 0;
      l_intNumberOfChannels = HSLExtensions::Venus::GetNumberOfChannels(ML_STAR);
      l_bln_IsSumulation = Util::GetSimulationMode();
      MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_FALSE);
      _DATA_GetLiquidClassParams(ML_STAR, i_strLiquidClassName, Translate("Please enter a liquid class name"), l_fltBlowoutvol, l_fltTransAir, l_fltAspSpeed, l_fltDispSpeed, l_fltMixSpeed, l_fltAspSwapSpeed, l_fltDispSwapSpeed, l_fltAspSettleTime, l_fltDispSettleTime, l_intCurrentTipType, l_blnOutput);
      if (l_blnOutput == ASWGLOBAL::BOOL::FALSE)
      {
        TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("Failed to get liquid class parameters"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        l_strAbortHandlerMessage = StrConcat12(Translate("PIP_MixBeadsByOverturn. "), Translate("Failed to get liquid class parameters"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        _DATA_IntegratedAbortHandler(Translate("NGSStarProcesses"), l_strAbortHandlerMessage);
      }
      _DATA_CheckVolume(i_fltMixVolume, i_fltOverturnVolume, l_intCurrentTipType, l_strCheckVolMessage, l_bln_Success);
      {
        loopCounter8 = 0;
        while (l_bln_Success == ASWGLOBAL::BOOL::FALSE)
        {
          loopCounter8 = loopCounter8 + 1;
          l_strMixVolume = StrFStrEx(i_fltMixVolume, 0, 5);
          l_strOverturnVolume = StrFStrEx(i_fltOverturnVolume, 0, 5);
          customDialog_13.InitCustomDialog("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");
          customDialog_13.SetCustomDialogProperty( "textBlock2.Text", l_strCheckVolMessage );
          customDialog_13.SetCustomDialogProperty( "txtMixVolume.Text", l_strMixVolume );
          customDialog_13.SetCustomDialogProperty( "txtOverturnVolume.Text", l_strOverturnVolume );
          customDialog_13.ShowCustomDialog();
          l_retValueDialog = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
          l_strMixVolume = customDialog_13.GetCustomDialogProperty( "txtMixVolume.Text" );
          l_strOverturnVolume = customDialog_13.GetCustomDialogProperty( "txtOverturnVolume.Text" );
          if (l_strMixVolume != "0.0")
          {
            i_fltMixVolume = StrFVal(l_strMixVolume);
          }
          if (l_strOverturnVolume != "0.0")
          {
            i_fltOverturnVolume = StrFVal(l_strOverturnVolume);
          }
          if (l_retValueDialog == 2)
          {
            customDialog_14.InitCustomDialog("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");
            customDialog_14.ShowCustomDialog();
            l_retValueDialog = customDialog_14.GetCustomDialogProperty( "ReturnValue" );
            TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("User aborted with failure of volumes check against tip capacity"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            l_strAbortHandlerMessage = StrConcat12(Translate("PIP_MixBeadsByOverturn. "), Translate("User aborted on volume check error"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            _DATA_IntegratedAbortHandler(Translate("NGSStarProcesses"), l_strAbortHandlerMessage);
          }
          _DATA_CheckVolume(i_fltMixVolume, i_fltOverturnVolume, l_intCurrentTipType, l_strCheckVolMessage, l_bln_Success);
        }
      }
      TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("l_fltBlowoutvol: "), l_fltBlowoutvol, Translate("---l_fltTransAir: "), l_fltTransAir, Translate("---l_fltAspSpeed: "), l_fltAspSpeed, Translate("---l_fltDispSpeed: "), l_fltDispSpeed, Translate("---l_fltMixSpeed: "), l_fltMixSpeed);
      TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("l_fltAspSwapSpeed: "), l_fltAspSwapSpeed, Translate("---l_fltDispSwapSpeed: "), l_fltDispSwapSpeed, Translate("---l_fltAspSettleTime: "), l_fltAspSettleTime, Translate("---l_fltDispSettleTime: "), l_fltDispSettleTime, Translate("---l_intCurrentTipType: "), l_intCurrentTipType);
      io_seqMix.SetCurrentPosition(1);
      l_intCurrentPosition = io_seqMix.GetCurrentPosition();
      if (l_intCurrentTipType == 1)
      {
        l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
      }
      if (l_intCurrentTipType == 5)
      {
        l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
      }
      if (l_intCurrentTipType == 23)
      {
        l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
      }
      l_strChannelPattern = Translate("");
      l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPattern, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, io_seqMix);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      if(0){
        if (l_intCurrentTipType == 1)
        {
          STAR_TIP_TOOLS::Optimized1mLTipPickup(ML_STAR, t_seqTips300, io_seqMix, t_strTipCounterNameTip300, l_strChannelPattern);
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            	l_str_StepReturn = arrRetValues[2];
          }
          STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, t_seqTips300, t_strTipCounterNameTip300);
        }
        else
        {
          if (l_intCurrentTipType == 5)
          {
            STAR_TIP_TOOLS::Optimized1mLTipPickup(ML_STAR, t_seqTips1000, io_seqMix, t_strTipCounterNameTip1000, l_strChannelPattern);
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              	l_str_StepReturn = arrRetValues[2];
            }
            STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, t_seqTips1000, t_strTipCounterNameTip1000);
          }
          else
          {
            if (l_intCurrentTipType == 23)
            {
              STAR_TIP_TOOLS::Optimized1mLTipPickup(ML_STAR, t_seqTips50, io_seqMix, t_strTipCounterNameTip50, l_strChannelPattern);
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                	l_str_StepReturn = arrRetValues[2];
              }
              STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, t_seqTips50, t_strTipCounterNameTip50);
            }
          }
        }
      }
      {
        lc_MixingCycle = 0;
        while (
           (io_seqMix.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, io_seqMix, 1);
          lc_MixingCycle = lc_MixingCycle + 1;
          SeqCopySequence(l_seqMix, io_seqMix);
          l_intCurrentPosition = io_seqMix.GetCurrentPosition();
          l_intEndPosition = io_seqMix.GetCount();
          l_intRemaining = l_intEndPosition - l_intCurrentPosition;
          l_intRemaining = l_intRemaining + 1;
          STAR_TIP_TOOLS::BuildChannelPattern(l_intRemaining, l_intNumberOfChannels, l_strChannelPattern);
          l_strBucket = l_strChannelPattern;
          l_intNumberOfPositions = StrReplace(l_strBucket, Translate("1"), Translate("2"));
          l_intNumberOfInactiveChannels = l_intNumberOfChannels - l_intNumberOfPositions;
          l_arrContainer_Z_mm.SetSize(0);
          l_arrContainerClearance.SetSize(0);
          l_arrContainer_X.SetSize(0);
          l_arrContainer_Y.SetSize(0);
          l_arrContainer_Z.SetSize(0);
          l_arrLabwareIDs.SetSize(0);
          l_arrPositionIDs.SetSize(0);
          l_arrStartVolumes.SetSize(0);
          l_intLoop = MthMin(l_intNumberOfPositions, l_intNumberOfChannels);
          {
            for(loopCounter1 = 0; loopCounter1 < l_intLoop;)
            {
              loopCounter1 = loopCounter1 + 1;
              l_strPositionID = SeqGetPositionId(io_seqMix);
              l_arrPositionIDs.AddAsLast(l_strPositionID);
              l_strLabwareID = SeqGetLabwareId(io_seqMix);
              l_arrLabwareIDs.AddAsLast(l_strLabwareID);
              DevGetLabwarePositionEx(ML_STAR, l_strLabwareID, l_strPositionID, l_flt_X, l_flt_Y, l_flt_Z, _junk);
              l_arrContainer_Z_mm.AddAsLast(l_flt_Z);
              LPQ::CONT_GetContainerDepth(ML_STAR, io_seqMix, ASWGLOBAL::BOOL::TRUE, l_flt_ContainerDepth, l_flt_ContainerClearance);
              l_arrContainerClearance.AddAsLast(l_flt_ContainerClearance);
              l_flt_X = l_flt_X * 10;
              l_flt_X = MthCeiling(l_flt_X);
              l_flt_X = StrIStr(l_flt_X);
              StrFillLeft(l_flt_X, Translate("0"), 5);
              l_arrContainer_X.AddAsLast(l_flt_X);
              l_flt_Y = l_flt_Y * 10;
              l_flt_Y = MthCeiling(l_flt_Y);
              l_flt_Y = StrIStr(l_flt_Y);
              StrFillLeft(l_flt_Y, Translate("0"), 4);
              l_arrContainer_Y.AddAsLast(l_flt_Y);
              l_flt_Z = l_flt_Z * 10;
              l_flt_Z = MthCeiling(l_flt_Z);
              l_flt_Z = StrIStr(l_flt_Z);
              StrFillLeft(l_flt_Z, Translate("0"), 4);
              l_arrContainer_Z.AddAsLast(l_flt_Z);
              SeqIncrement(io_seqMix, 1);
            }
          }
          l_arrContainerClearanceSorted = HSLExtensions::Array::Sort(l_arrContainerClearance, 2, _junk);
          l_flt_ContainerClearance = l_arrContainerClearanceSorted.ElementAt( 1 -1) * 10;
          l_flt_ContainerClearance = MthCeiling(l_flt_ContainerClearance);
          l_flt_ContainerClearance = StrIStr(l_flt_ContainerClearance);
          StrFillLeft(l_flt_ContainerClearance, Translate("0"), 4);
          l_str_at = Translate("at0&");
          l_str_tm = Translate("tm");
          {
            for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
            {
              loopCounter3 = loopCounter3 + 1;
              l_str_tm = StrConcat2(l_str_tm, Translate("1 "));
            }
          }
          {
            for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
            {
              loopCounter3 = loopCounter3 + 1;
              l_str_tm = StrConcat2(l_str_tm, Translate("0 "));
            }
          }
          l_str_tm = StrTrimRight(l_str_tm, Translate(""));
          l_str_xp = Translate("xp");
          {
            for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
            {
              loopCounter3 = loopCounter3 + 1;
              l_str_xp = StrConcat4(l_str_xp, l_arrContainer_X.ElementAt( loopCounter3 -1), Translate(" "), Translate(""));
            }
          }
          {
            for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
            {
              loopCounter3 = loopCounter3 + 1;
              l_str_xp = StrConcat4(l_str_xp, Translate("00000"), Translate(" "), Translate(""));
            }
          }
          l_str_xp = StrTrimRight(l_str_xp, Translate(""));
          l_str_yp = Translate("yp");
          {
            for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
            {
              loopCounter3 = loopCounter3 + 1;
              l_str_yp = StrConcat4(l_str_yp, l_arrContainer_Y.ElementAt( loopCounter3 -1), Translate(" "), Translate(""));
            }
          }
          {
            for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
            {
              loopCounter3 = loopCounter3 + 1;
              l_str_yp = StrConcat4(l_str_yp, Translate("0000"), Translate(" "), Translate(""));
            }
          }
          l_str_yp = StrTrimRight(l_str_yp, Translate(""));
          l_str_th = Translate("th2450");
          l_str_te = StrConcat2(Translate("te"), l_flt_ContainerClearance);
          l_str_lp = Translate("lp");
          {
            for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
            {
              loopCounter3 = loopCounter3 + 1;
              l_flt_Z = 0 + l_arrContainerClearance.ElementAt( loopCounter3 -1);
              l_flt_Z = l_flt_Z * 10;
              l_flt_Z = MthCeiling(l_flt_Z);
              l_flt_Z = StrIStr(l_flt_Z);
              StrFillLeft(l_flt_Z, Translate("0"), 4);
              l_str_lp = StrConcat4(l_str_lp, l_flt_Z, Translate(" "), Translate(""));
            }
          }
          {
            for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
            {
              loopCounter3 = loopCounter3 + 1;
              l_str_lp = StrConcat2(l_str_lp, Translate("2450 "));
            }
          }
          l_str_lp = StrTrimRight(l_str_lp, Translate(""));
          l_str_ch = Translate("ch000&");
          l_str_zl = Translate("zl2450&");
          l_str_zx = Translate("zx");
          {
            for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
            {
              loopCounter3 = loopCounter3 + 1;
              l_flt_Z = 0 + l_arrContainer_Z_mm.ElementAt( loopCounter3 -1);
              l_flt_Z = l_flt_Z * 10;
              l_flt_Z = MthCeiling(l_flt_Z);
              l_flt_Z = StrIStr(l_flt_Z);
              StrFillLeft(l_flt_Z, Translate("0"), 4);
              l_str_zx = StrConcat4(l_str_zx, l_flt_Z, Translate(" "), Translate(""));
            }
          }
          {
            for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
            {
              loopCounter3 = loopCounter3 + 1;
              l_str_zx = StrConcat2(l_str_zx, Translate("0000 "));
            }
          }
          l_str_zx = StrTrimRight(l_str_zx, Translate(""));
          l_str_ip = Translate("ip0000&");
          l_str_it = Translate("it0&");
          l_str_fp = Translate("fp0000&");
          l_str_av = Translate("av00000&");
          l_str_as = Translate("as1000&");
          l_str_ta = Translate("ta000&");
          l_str_ba = Translate("ba0000&");
          l_str_oa = Translate("oa000&");
          l_str_lm = Translate("lm1&");
          l_str_ll = Translate("ll1&");
          l_str_lv = Translate("lv1&");
          l_str_ld = Translate("ld00&");
          l_str_de = Translate("de1600&");
          l_str_wt = Translate("wt00&");
          l_str_mv = Translate("mv00000&");
          l_str_mc = Translate("mc00&");
          l_str_mp = Translate("mp000&");
          l_str_ms = Translate("ms1000&");
          l_strParameter = StrConcat12(l_str_at, l_str_tm, l_str_xp, l_str_yp, l_str_th, l_str_te, l_str_lp, l_str_ch, l_str_zl, l_str_zx, l_str_ip, l_str_fp);
          l_strParameter = StrConcat12(l_strParameter, l_str_av, l_str_as, l_str_ta, l_str_ba, l_str_lm, l_str_ll, l_str_de, l_str_wt, l_str_mv, l_str_mc, l_str_mp);
          l_strParameter = StrConcat12(l_strParameter, l_str_ms, Translate("po0000&"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("FW command parameters for finding liquid level: "), l_strParameter, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
            	l_str_FWAnswer = arrRetValues[3];
          }
          if (l_str_FWAnswer != "er00/00")
          {
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            o_strOutputErrorString = "Failed during liquid level search. The error returned is " + l_str_FWAnswer;
            return (ASWGLOBAL::BOOL::FALSE);
          }
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
            	l_strReturn = arrRetValues[2];
          }
          l_arrLiquidLevel.SetSize(0);
          l_arrStartVolumes.SetSize(0);
          if (l_intNumberOfPositions <= l_intNumberOfChannels)
          {
            {
              for(loopCounter1 = 0; loopCounter1 < l_intNumberOfPositions;)
              {
                loopCounter1 = loopCounter1 + 1;
                l_fltReturn = StepReturn::GetLastLiquidLevel(loopCounter1, l_strReturn);
                if (l_bln_IsSumulation == 1)
                {
                  l_fltReturn = l_fltReturn + 100;
                }
                l_fltVolumeAtLiquidLevel = DevComputeContainerVolume(ML_STAR, l_arrLabwareIDs.ElementAt( loopCounter1 -1), l_arrPositionIDs.ElementAt( loopCounter1 -1), l_fltReturn, 1);
                if(0){
                  l_fltVolumeAtLiquidLevel = DevComputeContainerVolume2(ML_STAR, l_arrLabwareIDs.ElementAt( loopCounter1 -1), l_arrPositionIDs.ElementAt( loopCounter1 -1), l_fltReturn, 1, ASWGLOBAL::BOOL::TRUE);
                }
                l_fltVolumeAtLiquidLevel = l_fltVolumeAtLiquidLevel * 1000;
                l_arrStartVolumes.AddAsLast(l_fltVolumeAtLiquidLevel);
                l_fltLiqLevelChangeTotal = 0;
                l_fltVolumeChange = 0;
                TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("loopCounter1: "), loopCounter1, Translate("---l_fltVolumeAtLiquidLevel: "), l_fltVolumeAtLiquidLevel, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                if (l_fltVolumeAtLiquidLevel <= i_fltOverturnVolume)
                {
                  l_arrLiquidLevel.AddAsLast(l_arrContainer_Z_mm.ElementAt( loopCounter1 -1));
                }
                else
                {
                  {
                    loopCounter9 = 0;
                    while (l_fltVolumeChange < i_fltOverturnVolume)
                    {
                      loopCounter9 = loopCounter9 + 1;
                      l_fltLiqLevelChangeTotal = l_fltLiqLevelChangeTotal + l_fltLiqLevelChangeInc;
                      l_fltLiqLevelAfterAsp = l_fltReturn - l_fltLiqLevelChangeTotal;
                      l_fltTestVolume = DevComputeContainerVolume(ML_STAR, l_arrLabwareIDs.ElementAt( loopCounter1 -1), l_arrPositionIDs.ElementAt( loopCounter1 -1), l_fltLiqLevelAfterAsp, 1);
                      l_fltTestVolume = l_fltTestVolume * 1000;
                      l_fltVolumeChange = l_fltVolumeAtLiquidLevel - l_fltTestVolume;
                      TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("l_fltVolumeChange: "), l_fltVolumeChange, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    }
                  }
                  l_arrLiquidLevel.AddAsLast(l_fltLiqLevelAfterAsp);
                }
              }
            }
          }
          else
          {
            {
              for(loopCounter1 = 0; loopCounter1 < l_intNumberOfChannels;)
              {
                loopCounter1 = loopCounter1 + 1;
                l_fltReturn = StepReturn::GetLastLiquidLevel(loopCounter1, l_strReturn);
                if (l_bln_IsSumulation == 1)
                {
                  l_fltReturn = l_fltReturn + 100;
                }
                l_fltVolumeAtLiquidLevel = DevComputeContainerVolume(ML_STAR, l_arrLabwareIDs.ElementAt( loopCounter1 -1), l_arrPositionIDs.ElementAt( loopCounter1 -1), l_fltReturn, 1);
                if(0){
                  l_fltVolumeAtLiquidLevel = DevComputeContainerVolume2(ML_STAR, l_arrLabwareIDs.ElementAt( loopCounter1 -1), l_arrPositionIDs.ElementAt( loopCounter1 -1), l_fltReturn, 1, ASWGLOBAL::BOOL::TRUE);
                }
                l_fltVolumeAtLiquidLevel = l_fltVolumeAtLiquidLevel * 1000;
                l_arrStartVolumes.AddAsLast(l_fltVolumeAtLiquidLevel);
                l_fltLiqLevelChangeTotal = 0;
                l_fltVolumeChange = 0;
                TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("loopCounter1: "), loopCounter1, Translate("---l_fltVolumeAtLiquidLevel: "), l_fltVolumeAtLiquidLevel, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                if (l_fltVolumeAtLiquidLevel <= i_fltOverturnVolume)
                {
                  l_arrLiquidLevel.AddAsLast(l_arrContainer_Z_mm.ElementAt( loopCounter1 -1));
                }
                else
                {
                  {
                    loopCounter9 = 0;
                    while (l_fltVolumeChange < i_fltOverturnVolume)
                    {
                      loopCounter9 = loopCounter9 + 1;
                      l_fltLiqLevelChangeTotal = l_fltLiqLevelChangeTotal + l_fltLiqLevelChangeInc;
                      l_fltLiqLevelAfterAsp = l_fltReturn - l_fltLiqLevelChangeTotal;
                      l_fltTestVolume = DevComputeContainerVolume(ML_STAR, l_arrLabwareIDs.ElementAt( loopCounter1 -1), l_arrPositionIDs.ElementAt( loopCounter1 -1), l_fltLiqLevelAfterAsp, 1);
                      l_fltTestVolume = l_fltTestVolume * 1000;
                      l_fltVolumeChange = l_fltVolumeAtLiquidLevel - l_fltTestVolume;
                      TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("l_fltVolumeChange: "), l_fltVolumeChange, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    }
                  }
                  l_arrLiquidLevel.AddAsLast(l_fltLiqLevelAfterAsp);
                }
              }
            }
          }
          l_arrLiquidLevelSorted = HSLExtensions::Array::Sort(l_arrLiquidLevel, 2, _junk);
          TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("l_arrLiquidLevel"), l_arrLiquidLevel);
          TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("l_arrContainer_Z_mm"), l_arrContainer_Z_mm);
          {
            for(loopCounter4 = 0; loopCounter4 < i_intOverturnCycles;)
            {
              loopCounter4 = loopCounter4 + 1;
              l_str_at = Translate("at0&");
              l_str_tm = Translate("tm");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_tm = StrConcat2(l_str_tm, Translate("1 "));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_tm = StrConcat2(l_str_tm, Translate("0 "));
                }
              }
              l_str_tm = StrTrimRight(l_str_tm, Translate(""));
              l_str_xp = Translate("xp");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_xp = StrConcat4(l_str_xp, l_arrContainer_X.ElementAt( loopCounter3 -1), Translate(" "), Translate(""));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_xp = StrConcat4(l_str_xp, Translate("00000"), Translate(" "), Translate(""));
                }
              }
              l_str_xp = StrTrimRight(l_str_xp, Translate(""));
              l_str_yp = Translate("yp");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_yp = StrConcat4(l_str_yp, l_arrContainer_Y.ElementAt( loopCounter3 -1), Translate(" "), Translate(""));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_yp = StrConcat4(l_str_yp, Translate("0000"), Translate(" "), Translate(""));
                }
              }
              l_str_yp = StrTrimRight(l_str_yp, Translate(""));
              l_str_th = Translate("th");
              l_flt_Z = l_arrLiquidLevelSorted.ElementAt( 1 -1) * 10;
              l_flt_Z = MthCeiling(l_flt_Z);
              l_flt_Z = StrIStr(l_flt_Z);
              StrFillLeft(l_flt_Z, Translate("0"), 4);
              l_str_th = StrConcat2(l_str_th, l_flt_Z);
              l_str_te = Translate("te");
              l_flt_Z = l_arrLiquidLevelSorted.ElementAt( 1 -1) * 10;
              l_flt_Z = MthCeiling(l_flt_Z);
              l_flt_Z = StrIStr(l_flt_Z);
              StrFillLeft(l_flt_Z, Translate("0"), 4);
              l_str_te = StrConcat2(l_str_te, l_flt_Z);
              l_str_lp = Translate("lp0000&");
              l_str_ch = Translate("ch000&");
              l_str_zl = Translate("zl");
              {
                for(loopCounter6 = 0; loopCounter6 < l_intNumberOfPositions;)
                {
                  loopCounter6 = loopCounter6 + 1;
                  l_flt_Z = 0 + l_arrContainer_Z_mm.ElementAt( loopCounter6 -1);
                  l_flt_Z = l_flt_Z + 1;
                  l_flt_Z = l_flt_Z * 10;
                  l_flt_Z = MthCeiling(l_flt_Z);
                  l_flt_Z = StrIStr(l_flt_Z);
                  l_flt_Z = StrFillLeft(l_flt_Z, Translate("0"), 4);
                  l_str_zl = StrConcat4(l_str_zl, l_flt_Z, " ", Translate(""));
                }
              }
              {
                for(loopCounter6 = 0; loopCounter6 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter6 = loopCounter6 + 1;
                  l_str_zl = StrConcat2(l_str_zl, Translate("2450 "));
                }
              }
              l_str_zl = StrTrimRight(l_str_zl, "");
              l_str_zx = Translate("zx");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_flt_Z = i_fltAspirationHeight + l_arrContainer_Z_mm.ElementAt( loopCounter3 -1);
                  l_flt_Z = l_flt_Z * 10;
                  l_flt_Z = MthCeiling(l_flt_Z);
                  l_flt_Z = StrIStr(l_flt_Z);
                  StrFillLeft(l_flt_Z, Translate("0"), 4);
                  l_str_zx = StrConcat4(l_str_zx, l_flt_Z, Translate(" "), Translate(""));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_zx = StrConcat2(l_str_zx, Translate("0000 "));
                }
              }
              l_str_zx = StrTrimRight(l_str_zx, Translate(""));
              l_str_ip = Translate("ip0000&");
              l_str_fp = Translate("fp0000&");
              l_str_av = Translate("av");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_fltVolumeAtLiquidLevel=l_arrStartVolumes.GetAt(loopCounter3-1);
                  if (l_fltVolumeAtLiquidLevel <= i_fltOverturnVolume)
                  {
                    l_flt_A = l_fltVolumeAtLiquidLevel * 10;
                  }
                  else
                  {
                    l_flt_A = i_fltOverturnVolume * 10;
                  }
                  l_flt_A = MthCeiling(l_flt_A);
                  l_flt_A = StrIStr(l_flt_A);
                  StrFillLeft(l_flt_A, Translate("0"), 5);
                  l_str_av = StrConcat4(l_str_av, l_flt_A, Translate(" "), Translate(""));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_av = StrConcat2(l_str_av, Translate("00000 "));
                }
              }
              l_str_av = StrTrimRight(l_str_av, Translate(""));
              l_str_as = Translate("as");
              l_flt_A = l_fltAspSpeed * 10;
              l_flt_A = MthCeiling(l_flt_A);
              l_flt_A = StrIStr(l_flt_A);
              StrFillLeft(l_flt_A, Translate("0"), 4);
              l_str_as = StrConcat4(l_str_as, l_flt_A, Translate("&"), Translate(""));
              l_str_ta = Translate("ta");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_flt_A = l_fltTransAir * 10;
                  l_flt_A = MthCeiling(l_flt_A);
                  l_flt_A = StrIStr(l_flt_A);
                  StrFillLeft(l_flt_A, Translate("0"), 3);
                  l_str_ta = StrConcat4(l_str_ta, l_flt_A, Translate(" "), Translate(""));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_ta = StrConcat2(l_str_ta, Translate("000 "));
                }
              }
              l_str_ta = StrTrimRight(l_str_ta, Translate(""));
              l_str_ba = Translate("ba");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_flt_A = l_fltBlowoutvol * 10;
                  l_flt_A = MthCeiling(l_flt_A);
                  l_flt_A = StrIStr(l_flt_A);
                  StrFillLeft(l_flt_A, Translate("0"), 4);
                  l_str_ba = StrConcat4(l_str_ba, l_flt_A, Translate(" "), Translate(""));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_ba = StrConcat2(l_str_ba, Translate("0000 "));
                }
              }
              l_str_ba = StrTrimRight(l_str_ba, Translate(""));
              l_str_lm = Translate("lm0&");
              l_str_ll = Translate("ll1&");
              l_str_de = Translate("de");
              l_flt_A = l_fltAspSwapSpeed * 10;
              l_flt_A = MthCeiling(l_flt_A);
              l_flt_A = StrIStr(l_flt_A);
              StrFillLeft(l_flt_A, Translate("0"), 4);
              l_str_de = StrConcat4(l_str_de, l_flt_A, Translate("&"), Translate(""));
              l_str_wt = Translate("wt");
              l_flt_A = l_fltAspSettleTime * 10;
              l_flt_A = MthCeiling(l_flt_A);
              l_flt_A = StrIStr(l_flt_A);
              StrFillLeft(l_flt_A, Translate("0"), 2);
              l_str_wt = StrConcat4(l_str_wt, l_flt_A, Translate("&"), Translate(""));
              l_str_mv = Translate("mv");
              l_flt_A = i_fltMixVolume * 10;
              l_flt_A = MthCeiling(l_flt_A);
              l_flt_A = StrIStr(l_flt_A);
              StrFillLeft(l_flt_A, Translate("0"), 5);
              l_str_mv = StrConcat4(l_str_mv, l_flt_A, Translate("&"), Translate(""));
              l_str_mc = Translate("mc");
              l_flt_A = i_intMixCycles * 1;
              l_flt_A = MthCeiling(l_flt_A);
              l_flt_A = StrIStr(l_flt_A);
              StrFillLeft(l_flt_A, Translate("0"), 2);
              l_str_mc = StrConcat4(l_str_mc, l_flt_A, Translate("&"), Translate(""));
              l_str_mp = Translate("mp000&");
              l_str_ms = Translate("ms");
              l_flt_A = l_fltMixSpeed * 10;
              l_flt_A = MthCeiling(l_flt_A);
              l_flt_A = StrIStr(l_flt_A);
              StrFillLeft(l_flt_A, Translate("0"), 4);
              l_str_ms = StrConcat4(l_str_ms, l_flt_A, Translate("&"), Translate(""));
              l_strParameter = StrConcat12(l_str_at, l_str_tm, l_str_xp, l_str_yp, l_str_th, l_str_te, l_str_lp, l_str_ch, l_str_zl, l_str_zx, l_str_ip, l_str_fp);
              l_strParameter = StrConcat12(l_strParameter, l_str_av, l_str_as, l_str_ta, l_str_ba, l_str_lm, l_str_ll, l_str_de, l_str_wt, l_str_mv, l_str_mc, l_str_mp);
              l_strParameter = StrConcat12(l_strParameter, l_str_ms, Translate("mh0000&"), "it0&", "oa000&", "lv1&", "ld00&", "gi000&", "gj0", "gk0", "zu0000&", "zr00000&zo005&po0000&lk0&ik0000&sd0500&se0500&sz0300&io0000&il00000&in0000&");
              TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("FW command parameters for aspiration from bottom: "), l_strParameter, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
                	l_str_FWAnswer = arrRetValues[3];
              }
              if (l_str_FWAnswer != "er00/00")
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                o_strOutputErrorString = "Failed during aspiration from bottom of containers. The error returned is " + l_str_FWAnswer;
                return (ASWGLOBAL::BOOL::FALSE);
              }
              l_str_dm = Translate("dm");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_dm = StrConcat2(l_str_dm, Translate("3 "));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_dm = StrConcat2(l_str_dm, Translate("0 "));
                }
              }
              l_str_dm = StrTrimRight(l_str_dm, Translate(""));
              l_str_tm = Translate("tm");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_tm = StrConcat2(l_str_tm, Translate("1 "));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_tm = StrConcat2(l_str_tm, Translate("0 "));
                }
              }
              l_str_tm = StrTrimRight(l_str_tm, Translate(""));
              l_str_xp = Translate("xp");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_xp = StrConcat4(l_str_xp, l_arrContainer_X.ElementAt( loopCounter3 -1), Translate(" "), Translate(""));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_xp = StrConcat4(l_str_xp, Translate("00000"), Translate(" "), Translate(""));
                }
              }
              l_str_xp = StrTrimRight(l_str_xp, Translate(""));
              l_str_yp = Translate("yp");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_yp = StrConcat4(l_str_yp, l_arrContainer_Y.ElementAt( loopCounter3 -1), Translate(" "), Translate(""));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_yp = StrConcat4(l_str_yp, Translate("0000"), Translate(" "), Translate(""));
                }
              }
              l_str_yp = StrTrimRight(l_str_yp, Translate(""));
              l_str_th = Translate("th");
              l_flt_Z = l_arrLiquidLevelSorted.ElementAt( 1 -1) * 10;
              l_flt_Z = MthCeiling(l_flt_Z);
              l_flt_Z = StrIStr(l_flt_Z);
              StrFillLeft(l_flt_Z, Translate("0"), 4);
              l_str_th = StrConcat2(l_str_th, l_flt_Z);
              l_str_te = Translate("te");
              l_flt_Z = l_arrLiquidLevelSorted.ElementAt( 1 -1) * 10;
              l_flt_Z = MthCeiling(l_flt_Z);
              l_flt_Z = StrIStr(l_flt_Z);
              StrFillLeft(l_flt_Z, Translate("0"), 4);
              l_str_te = StrConcat2(l_str_te, l_flt_Z);
              l_str_lp = Translate("lp0000&");
              l_str_zl = Translate("zl");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_flt_Z = 0 + l_arrLiquidLevel.ElementAt( loopCounter3 -1);
                  l_flt_Z = l_flt_Z * 10;
                  l_flt_Z = MthCeiling(l_flt_Z);
                  l_flt_Z = StrIStr(l_flt_Z);
                  StrFillLeft(l_flt_Z, Translate("0"), 4);
                  l_str_zl = StrConcat4(l_str_zl, l_flt_Z, Translate(" "), Translate(""));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_zl = StrConcat2(l_str_zl, Translate("2450 "));
                }
              }
              l_str_zl = StrTrimRight(l_str_zl, Translate(""));
              l_str_zx = Translate("zx");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_flt_Z = 0 + l_arrContainer_Z_mm.ElementAt( loopCounter3 -1);
                  l_flt_Z = l_flt_Z * 10;
                  l_flt_Z = MthCeiling(l_flt_Z);
                  l_flt_Z = StrIStr(l_flt_Z);
                  StrFillLeft(l_flt_Z, Translate("0"), 4);
                  l_str_zx = StrConcat4(l_str_zx, l_flt_Z, Translate(" "), Translate(""));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_zx = StrConcat2(l_str_zx, Translate("0000 "));
                }
              }
              l_str_zx = StrTrimRight(l_str_zx, Translate(""));
              l_str_ip = Translate("ip");
              {
                for(lc_IPAssign = 0; lc_IPAssign < l_intNumberOfPositions;)
                {
                  lc_IPAssign = lc_IPAssign + 1;
                  l_flt_ImmersionDepthTest = l_arrContainer_Z_mm.ElementAt( lc_IPAssign -1) + i_fltImmersionDepth;
                  if (l_arrLiquidLevel.ElementAt( lc_IPAssign -1) > l_flt_ImmersionDepthTest)
                  {
                    l_flt_A = i_fltImmersionDepth * 10;
                    l_flt_A = MthCeiling(l_flt_A);
                    l_flt_A = StrIStr(l_flt_A);
                    l_flt_A = StrFillLeft(l_flt_A, Translate("0"), 4);
                    l_str_ip = StrConcat4(l_str_ip, l_flt_A, Translate(" "), Translate(""));
                  }
                  else
                  {
                    l_flt_A = Translate("0000");
                    l_str_ip = StrConcat4(l_str_ip, l_flt_A, Translate(" "), Translate(""));
                  }
                }
              }
              {
                for(lc_IPAssign = 0; lc_IPAssign < l_intNumberOfInactiveChannels;)
                {
                  lc_IPAssign = lc_IPAssign + 1;
                  l_str_ip = StrConcat2(l_str_ip, Translate("0000 "));
                }
              }
              l_str_ip = StrTrimRight(l_str_ip, Translate(""));
              l_str_fp = Translate("fp0000&");
              l_str_dv = Translate("dv");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_fltVolumeAtLiquidLevel=l_arrStartVolumes.GetAt(loopCounter3-1);
                  if (l_fltVolumeAtLiquidLevel <= i_fltOverturnVolume)
                  {
                    l_flt_A = l_fltVolumeAtLiquidLevel * 10;
                  }
                  else
                  {
                    l_flt_A = i_fltOverturnVolume * 10;
                  }
                  l_flt_A = MthCeiling(l_flt_A);
                  l_flt_A = StrIStr(l_flt_A);
                  StrFillLeft(l_flt_A, Translate("0"), 5);
                  l_str_dv = StrConcat4(l_str_dv, l_flt_A, Translate(" "), Translate(""));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_dv = StrConcat2(l_str_dv, Translate("00000 "));
                }
              }
              l_str_dv = StrTrimRight(l_str_dv, Translate(""));
              l_str_ds = Translate("ds");
              l_flt_A = l_fltDispSpeed * 10;
              l_flt_A = MthCeiling(l_flt_A);
              l_flt_A = StrIStr(l_flt_A);
              StrFillLeft(l_flt_A, Translate("0"), 4);
              l_str_ds = StrConcat4(l_str_ds, l_flt_A, Translate("&"), Translate(""));
              l_str_ta = Translate("ta");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_flt_A = l_fltTransAir * 10;
                  l_flt_A = MthCeiling(l_flt_A);
                  l_flt_A = StrIStr(l_flt_A);
                  StrFillLeft(l_flt_A, Translate("0"), 3);
                  l_str_ta = StrConcat4(l_str_ta, l_flt_A, Translate(" "), Translate(""));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_ta = StrConcat2(l_str_ta, Translate("000 "));
                }
              }
              l_str_ta = StrTrimRight(l_str_ta, Translate(""));
              l_str_ba = Translate("ba");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_flt_A = l_fltBlowoutvol * 10;
                  l_flt_A = MthCeiling(l_flt_A);
                  l_flt_A = StrIStr(l_flt_A);
                  StrFillLeft(l_flt_A, Translate("0"), 4);
                  l_str_ba = StrConcat4(l_str_ba, l_flt_A, Translate(" "), Translate(""));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_ba = StrConcat2(l_str_ba, Translate("0000 "));
                }
              }
              l_str_ba = StrTrimRight(l_str_ba, Translate(""));
              l_str_lm = Translate("lm0&");
              l_str_ll = Translate("ll1&");
              l_str_de = Translate("de");
              l_flt_A = l_fltDispSwapSpeed * 10;
              l_flt_A = MthCeiling(l_flt_A);
              l_flt_A = StrIStr(l_flt_A);
              StrFillLeft(l_flt_A, Translate("0"), 4);
              l_str_de = StrConcat4(l_str_de, l_flt_A, Translate("&"), Translate(""));
              l_str_wt = Translate("wt");
              l_flt_A = l_fltDispSettleTime * 10;
              l_flt_A = MthCeiling(l_flt_A);
              l_flt_A = StrIStr(l_flt_A);
              StrFillLeft(l_flt_A, Translate("0"), 2);
              l_str_wt = StrConcat4(l_str_wt, l_flt_A, Translate("&"), Translate(""));
              l_str_mv = Translate("mv");
              l_flt_A = i_fltMixVolume * 10;
              l_flt_A = MthCeiling(l_flt_A);
              l_flt_A = StrIStr(l_flt_A);
              StrFillLeft(l_flt_A, Translate("0"), 5);
              l_str_mv = StrConcat4(l_str_mv, l_flt_A, Translate("&"), Translate(""));
              l_str_mc = Translate("mc");
              l_flt_A = i_intMixCycles * 1;
              l_flt_A = MthCeiling(l_flt_A);
              l_flt_A = StrIStr(l_flt_A);
              StrFillLeft(l_flt_A, Translate("0"), 2);
              l_str_mc = StrConcat4(l_str_mc, l_flt_A, Translate("&"), Translate(""));
              l_str_mp = Translate("mp");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_flt_A = i_fltMixHeight * 10;
                  l_flt_A = MthCeiling(l_flt_A);
                  l_flt_A = StrIStr(l_flt_A);
                  StrFillLeft(l_flt_A, Translate("0"), 3);
                  l_str_mp = StrConcat4(l_str_mp, l_flt_A, Translate(" "), Translate(""));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_mp = StrConcat2(l_str_mp, Translate("000 "));
                }
              }
              l_str_mp = StrTrimRight(l_str_mp, Translate(""));
              l_str_ms = Translate("ms");
              l_flt_A = l_fltMixSpeed * 10;
              l_flt_A = MthCeiling(l_flt_A);
              l_flt_A = StrIStr(l_flt_A);
              StrFillLeft(l_flt_A, Translate("0"), 4);
              l_str_ms = StrConcat4(l_str_ms, l_flt_A, Translate("&"), Translate(""));
              l_str_mh = Translate("mh");
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfPositions;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  LPQ::CONT_GetContainerWidth(ML_STAR, l_seqMix, l_flt_A);
                  {
                    variable pi(3.141592653589793);
                    l_flt_A = (i_fltMixVolume * 4) / (pi * l_flt_A^2);
                  }
                  l_flt_A = l_flt_A * 10;
                  l_flt_A = MthCeiling(l_flt_A);
                  l_flt_A = StrIStr(l_flt_A);
                  StrFillLeft(l_flt_A, Translate("0"), 4);
                  l_str_mh = StrConcat4(l_str_mh, l_flt_A, Translate(" "), Translate(""));
                }
              }
              {
                for(loopCounter3 = 0; loopCounter3 < l_intNumberOfInactiveChannels;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  l_str_mh = StrConcat2(l_str_mh, Translate("0000 "));
                }
              }
              l_str_mh = StrTrimRight(l_str_mh, Translate(""));
              l_strParameter = StrConcat12(l_str_dm, l_str_tm, l_str_xp, l_str_yp, l_str_th, l_str_te, l_str_lp, Translate(""), l_str_zl, l_str_zx, l_str_ip, l_str_fp);
              l_strParameter = StrConcat12(l_strParameter, l_str_dv, l_str_ds, l_str_ta, l_str_ba, l_str_lm, l_str_ll, l_str_de, l_str_wt, l_str_mv, l_str_mc, l_str_mp);
              l_strParameter = StrConcat12(l_strParameter, l_str_ms, l_str_mh, Translate("it0&"), Translate("lv1&gi000&gj0gk0zu0000&zr00000&zo005&po0000&"), Translate("ss2500&rv000&dj00"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("FW command parameters for dispense to top: "), l_strParameter, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
                	l_str_FWAnswer = arrRetValues[3];
              }
              if (l_str_FWAnswer != "er00/00")
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                o_strOutputErrorString = "Failed during dispense at liquid surface. The error returned is " + l_str_FWAnswer;
                return (ASWGLOBAL::BOOL::FALSE);
              }
            }
          }
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          if (l_intNumberOfPositions < l_intNumberOfChannels)
          {
            l_intCurrentPosition = l_intCurrentPosition + l_intNumberOfPositions;
          }
          else
          {
            l_intCurrentPosition = l_intCurrentPosition + l_intNumberOfChannels;
          }
          io_seqMix.SetCurrentPosition(l_intCurrentPosition);
          if (
             (io_seqMix.GetCurrentPosition() > 0 && io_seqMix.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        io_seqMix.SetMax(io_seqMix.GetTotal());
        io_seqMix.SetCurrentPosition(1);
      }
      _EjectTips(ML_STAR, l_strChannelPattern);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_GetLiquidClassParams( device & ML_STAR, variable & io_l_strLiqClassName, variable i_l_strInputDialogTitle, variable & o_l_fltBlowoutvol, variable & o_l_fltTransAir, variable & o_l_fltAspSpeed, variable & o_l_fltDispSpeed, variable & o_l_fltMixSpeed, variable & o_l_fltAspSwapSpeed, variable & o_l_fltDispSwapSpeed, variable & o_l_fltAspSettleTime, variable & o_l_fltDispSettleTime, variable & o_l_intTipType, variable & o_l_blnSuccessReturn ) void {
    private variable l_strAbortHandlerMessage;
    private variable l_bln_LiqClassError;
    private variable l_int_DialogResult;
    private variable l_intDialogResult;
    private variable loopCounter1;
    private variable l_bln_Success;
    private variable l_arrToolTip[];
    private variable l_arrTypes[];
    private variable l_arrLabels[];
    private variable l_arrValues[];
    private variable l_arrUnits[];
    private variable l_arrRanges[];
    private variable l_arrLiqClassDialogResult[];
    o_l_fltBlowoutvol = 0;
    o_l_fltTransAir = 0;
    o_l_fltAspSpeed = 0;
    o_l_fltDispSpeed = 0;
    o_l_fltMixSpeed = 0;
    o_l_fltAspSwapSpeed = 0;
    o_l_fltDispSwapSpeed = 0;
    o_l_fltAspSettleTime = 0;
    o_l_fltDispSettleTime = 0;
    o_l_intTipType = 0;
    o_l_blnSuccessReturn = 0;
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG,TRACELEVEL::ACTION::START,"","",GetFunctionName());
    o_l_blnSuccessReturn = ASWGLOBAL::BOOL::FALSE;
    l_bln_Success = 0;
    l_bln_LiqClassError = 0;
    l_intDialogResult = 0;
    o_l_fltBlowoutvol = 0;
    o_l_fltTransAir = 0;
    o_l_fltAspSpeed = 0;
    o_l_fltDispSpeed = 0;
    o_l_fltMixSpeed = 0;
    o_l_fltAspSwapSpeed = 0;
    o_l_fltDispSwapSpeed = 0;
    o_l_fltAspSettleTime = 0;
    o_l_fltDispSettleTime = 0;
    o_l_intTipType = 0;
    l_arrLabels.SetSize(0);
    l_arrValues.SetSize(0);
    l_arrUnits.SetSize(0);
    l_arrTypes.SetSize(0);
    l_arrRanges.SetSize(0);
    l_arrToolTip.SetSize(0);
    l_arrLiqClassDialogResult.SetSize(1);
    l_arrLabels.AddAsLast(Translate("Liquid class name:"));
    l_arrValues.AddAsLast(Translate("  "));
    l_arrUnits.AddAsLast(Translate(""));
    l_arrTypes.AddAsLast(2);
    l_arrRanges.AddAsLast(Translate(""));
    l_arrToolTip.AddAsLast(Translate(""));
    MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
    onerror goto LiqClassError;
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(io_l_strLiqClassName);
    {
      loopCounter1 = 0;
      while (l_bln_LiqClassError == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        if (l_bln_LiqClassError == 1)
        {
          l_int_DialogResult = AswStandardDialogs::InputDialog(i_l_strInputDialogTitle, AswStandardDialogs::ButtonType::OkCancel, 0, 50, Translate("Please enter a liquid class name"), Translate("Press 'OK' to continue or 'Cancel' to abort the method"), l_arrLabels, l_arrValues, l_arrUnits, l_arrTypes, l_arrRanges, l_arrToolTip, l_arrLiqClassDialogResult);
          if (l_int_DialogResult == 2)
          {
            AswStandardDialogs::MessageDialog(Translate("Method aborted"), AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, Translate("The method has been aborted by the user"));
            TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("User aborted from missing liquid class message dialog."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            l_strAbortHandlerMessage = StrConcat12(Translate("_DATA_GetLiquidClassParams. "), Translate("User aborted on liquid class name entry error"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            _DATA_IntegratedAbortHandler(Translate("NGSStarProcesses"), l_strAbortHandlerMessage);
          }
          io_l_strLiqClassName=l_arrLiqClassDialogResult.GetAt(1-1);
          io_l_strLiqClassName = StrTrimLeft(io_l_strLiqClassName, Translate(""));
          io_l_strLiqClassName = StrTrimRight(io_l_strLiqClassName, Translate(""));
        }
        l_bln_LiqClassError = 0;
        MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(io_l_strLiqClassName);
      }
    }
    onerror goto 0;
    o_l_fltBlowoutvol = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::BlowOutVolume);
    o_l_fltTransAir = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::AirTransportVolume);
    o_l_fltAspSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::FlowRate);
    o_l_fltDispSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::FlowRate);
    o_l_fltMixSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::MixFlowRate);
    o_l_fltAspSwapSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::SwapSpeed);
    o_l_fltDispSwapSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::SwapSpeed);
    o_l_fltAspSettleTime = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::SettlingTime);
    o_l_fltDispSettleTime = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::SettlingTime);
    o_l_intTipType = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
    o_l_blnSuccessReturn = ASWGLOBAL::BOOL::TRUE;
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG,TRACELEVEL::ACTION::COMPLETE,"","",GetFunctionName());
    return;
    LiqClassError:
    {
         l_bln_LiqClassError = 1;
         if(io_l_strLiqClassName != "")
         {
              i_l_strInputDialogTitle = "Liquid class not found";//SHOW LIQUID CLASS IS NOT FOUND IF THE NAME IS NOT BLANK
         }
         resume next;
    }
  }

  private function _DATA_CheckVolume( variable i_l_fltMixVolume, variable i_l_fltOverturnVolume, variable i_l_intTipType, variable & o_l_strVolumeCheckMsg, variable & o_l_blnSuccess ) void {
    o_l_strVolumeCheckMsg = 0;
    o_l_blnSuccess = 0;
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG,TRACELEVEL::ACTION::START,"","",GetFunctionName());
    o_l_blnSuccess = ASWGLOBAL::BOOL::TRUE;
    o_l_strVolumeCheckMsg = Translate("");
    //Tips that hold 10uL
    if((i_l_intTipType == 2 || i_l_intTipType == 3 || i_l_intTipType == 11) && (i_l_fltMixVolume > 10.0 || i_l_fltOverturnVolume > 10.0))
    {
         o_l_strVolumeCheckMsg = "You are using 10uL tips and you have entered either a mixing volume or an overturn volme that is greater than 10uL.\nCorrect volumes below and click 'Continue'.\n             OR\nClick 'Cancel' to abort the method.";
         o_l_blnSuccess = ASWGLOBAL::BOOL::FALSE;
    }
    //Tips that hold 30uL
    if(i_l_intTipType == 15 && (i_l_fltMixVolume > 30.0 || i_l_fltOverturnVolume > 30.0))
    {
         o_l_strVolumeCheckMsg = "You are using 30uL tips and you have entered either a mixing volume or an overturn volume that is greater than 30uL.\nCorrect volumes below and click 'Continue'.\n             OR\nClick 'Cancel' to abort the method.";
         o_l_blnSuccess = ASWGLOBAL::BOOL::FALSE;
    }
    //Tips that hold 50uL
    if((i_l_intTipType == 22 || i_l_intTipType == 23 || i_l_intTipType == 20 || i_l_intTipType == 33) && (i_l_fltMixVolume > 50.0 || i_l_fltOverturnVolume > 50.0))
    {
         o_l_strVolumeCheckMsg = "You are using 50uL tips and you have entered either a mixing volume or an overturn volume that is greater than 50uL.\nCorrect volumes below and click 'Continue'.\n             OR\nClick 'Cancel' to abort the method.";
         o_l_blnSuccess = ASWGLOBAL::BOOL::FALSE;
    }
    //Tips that hold 150uL
    if(i_l_intTipType == 44 && (i_l_fltMixVolume > 150.0 || i_l_fltOverturnVolume > 150.0))
    {
         o_l_strVolumeCheckMsg = "You are using 150uL tips and you have entered either a mixing volume or an overturn volume that is greater than 150uL.\nCorrect volumes below and click 'Continue'.\n             OR\nClick 'Cancel' to abort the method.";
         o_l_blnSuccess = ASWGLOBAL::BOOL::FALSE;
    }
    //Tips that hold 250uL
    if(i_l_intTipType == 35 && (i_l_fltMixVolume > 250.0 || i_l_fltOverturnVolume > 250.0))
    {
         o_l_strVolumeCheckMsg = "You are using 250uL tips and you have entered either a mixing volume or an overturn volume that is greater than 250uL.\nCorrect volumes below and click 'Continue'.\n             OR\nClick 'Cancel' to abort the method.";
         o_l_blnSuccess = ASWGLOBAL::BOOL::FALSE;
    }
    //Tips that hold 300uL
    if((i_l_intTipType == 0 || i_l_intTipType == 1 || i_l_intTipType == 7 || i_l_intTipType == 9 || i_l_intTipType == 10 || i_l_intTipType == 12 || i_l_intTipType == 45 || i_l_intTipType == 36 || i_l_intTipType == 28) && (i_l_fltMixVolume > 300.0 || i_l_fltOverturnVolume > 300.0))
    {
         o_l_strVolumeCheckMsg = "You are using 300uL tips and you have entered either a mixing volume or an overturn volume that is greater than 300uL.\nCorrect volumes below and click 'Continue'.\n             OR\nClick 'Cancel' to abort the method.";
         o_l_blnSuccess = ASWGLOBAL::BOOL::FALSE;
    }
    //Tips that hold 1000uL
    if((i_l_intTipType == 4 || i_l_intTipType == 5 || i_l_intTipType == 8 || i_l_intTipType == 13) && (i_l_fltMixVolume > 1000.0 || i_l_fltOverturnVolume > 1000.0))
    {
         o_l_strVolumeCheckMsg = "You are using 1000uL tips and you have entered either a mixing volume or an overturn volume that is greater than 1000uL.\nCorrect volumes below and click 'Continue'.\n             OR\nClick 'Cancel' to abort the method.";
         o_l_blnSuccess = ASWGLOBAL::BOOL::FALSE;
    }
    //Tips that hold 4000uL
    if(i_l_intTipType == 29 && (i_l_fltMixVolume > 4000.0 || i_l_fltOverturnVolume > 4000.0))
    {
         o_l_strVolumeCheckMsg = "You are using 4000uL tips and you have entered either a mixing volume or an overturn volume that is greater than 4000uL.\nCorrect volumes below and click 'Continue'.\n             OR\nClick 'Cancel' to abort the method.";
         o_l_blnSuccess = ASWGLOBAL::BOOL::FALSE;
    }
    //Tips that hold 5000uL
    if((i_l_intTipType == 16 || i_l_intTipType == 25) && (i_l_fltMixVolume > 5000.0 || i_l_fltOverturnVolume > 5000.0))
    {
         o_l_strVolumeCheckMsg = "You are using 5000uL tips and you have entered either a mixing volume or an overturn volume that is greater than 5000uL.\nCorrect volumes below and click 'Continue'.\n             OR\nClick 'Cancel' to abort the method.";
         o_l_blnSuccess = ASWGLOBAL::BOOL::FALSE;
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG,TRACELEVEL::ACTION::COMPLETE,"","",GetFunctionName());
  }

  function PIP_MPH_TipControl_ExpandedMix_AspirateAll( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable i_fltVolume, variable i_strLiquidClassNameTransfer, variable i_intMixCyclesAspiration, variable i_intMixCyclesDispense, variable i_fltVolumeMixAspiration, variable i_fltVolumeMixDispense, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_blnPickUpTips, variable i_blnEjectTips ) variable {
    private variable l_strComment;
    private variable l_strVolume;
    private variable l_intTotalRows;
    private variable l_intTotalColumns;
    private variable l_strStepReturnValueDispense;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strChannelPattern;
    private variable l_blnSuccess;
    private variable l_strStepReturnValueAspiration;
    private variable l_intMixCycleAspiration;
    private variable l_intNumberOfSamplesAdjustedToFullRows;
    private variable l_intCountCharactersToBeExctrated;
    private variable l_intCurrentDispenseMode;
    private variable l_intCurrentTipType;
    private variable l_strTipCounterNameIntermediate;
    private variable l_intMixCycleDispense;
    private variable l_intIndexFindSubstring;
    private variable o_strTrimmedVolume;
    private variable l_strCurrentDispenseMode;
    private variable l_intNumberOfSamplesAdjustedToFullColumns;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDOfTargetSequence;
    private sequence l_seqTempAspirationPosition;
    private sequence l_seqTempDispensePosition;
    private variable l_arrFltVolumeContainerInMicroliter[];
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strVolume = StrFStr(i_fltVolume);
    l_intIndexFindSubstring = StrFind(l_strVolume, Translate("."));
    l_intCountCharactersToBeExctrated = l_intIndexFindSubstring + 2;
    o_strTrimmedVolume = StrLeft(l_strVolume, l_intCountCharactersToBeExctrated);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents using MPH"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering "), o_strTrimmedVolume, Translate(" µl."));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnSuccess = _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
    _DATA_SetRackVisibility(i_seqAspirationPosition, ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_blnSuccess = _DATA_PlausibilityCheckVolume(i_fltVolume, l_intCurrentTipType);
      if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
      {
        return (ASWGLOBAL::BOOL::FALSE);
      }
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        if (t_intMPH96TipPickUpSide <= 1)
        {
          MECC::TraceComment(Translate("tip pick up side is defined to pick up columns"));
          _DATA_MPH_ProvideSequenceFullColumns(i_seqAspirationPosition, l_seqTempAspirationPosition);
          _DATA_MPH_ProvideSequenceFullColumns(i_seqDispensePosition, l_seqTempDispensePosition);
          l_intNumberOfSamplesAdjustedToFullColumns = l_seqTempAspirationPosition.GetCount();
          l_intTotalColumns = l_intNumberOfSamplesAdjustedToFullColumns / 8;
          _DATA_ChannelPatternMPH96Columns(l_intTotalColumns, t_intMPH96TipPickUpSide, l_strChannelPattern);
        }
        else
        {
          MECC::TraceComment(Translate("tip pick up side is defined to pick up rows"));
          _DATA_MPH_ProvideSequenceFullRows(i_seqAspirationPosition, l_seqTempAspirationPosition);
          _DATA_MPH_ProvideSequenceFullRows(i_seqDispensePosition, l_seqTempDispensePosition);
          l_intNumberOfSamplesAdjustedToFullRows = l_seqTempAspirationPosition.GetCount();
          l_intTotalRows = l_intNumberOfSamplesAdjustedToFullRows / 12;
          _DATA_ChannelPatternMPH96Rows(l_intTotalRows, t_intMPH96TipPickUpSide, l_strChannelPattern);
        }
        if (i_fltVolumeMixDispense == 0)
        {
          l_intMixCycleDispense = 0;
        }
        else
        {
          l_intMixCycleDispense = i_intMixCyclesDispense;
        }
        if (i_fltVolumeMixAspiration == 0)
        {
          l_intMixCycleAspiration = 0;
        }
        else
        {
          l_intMixCycleAspiration = i_intMixCyclesAspiration;
        }
        if (l_intCurrentTipType == 5)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
        }
        if (l_intCurrentTipType == 1)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
        }
        if (l_intCurrentTipType == 23)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
        }
        if (i_blnPickUpTips == ASWGLOBAL::BOOL::TRUE)
        {
          if (t_intMPH96TipPickUpSide <= 1)
          {
            l_blnSuccess = _PickUpTipsMPH96Columns(ML_STAR, l_strTipCounterNameIntermediate, l_intTotalColumns, t_intMPH96TipPickUpSide);
          }
          else
          {
            l_blnSuccess = _PickUpTipsMPH96Rows(ML_STAR, l_strTipCounterNameIntermediate, l_intTotalRows, t_intMPH96TipPickUpSide);
          }
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
        if (i_fltAspirateHeightFromBottom == 0)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            	l_strStepReturnValueAspiration = arrRetValues[2];
          }
          _DATA_ComputeVolumeInLabware(ML_STAR, l_seqTempAspirationPosition, l_strChannelPattern, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::TRUE, l_arrFltVolumeContainerInMicroliter);
          t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Copy(l_arrFltVolumeContainerInMicroliter);
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            	l_strStepReturnValueAspiration = arrRetValues[2];
          }
        }
        if (i_fltDispenseHeightFromBottom == 0)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strStepReturnValueDispense = arrRetValues[2];
          }
          _DATA_ComputeVolumeInLabware(ML_STAR, l_seqTempDispensePosition, l_strChannelPattern, l_strStepReturnValueDispense, ASWGLOBAL::BOOL::TRUE, l_arrFltVolumeContainerInMicroliter);
          t_arrFltVolumeContainerInMicroliterDispense = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterDispense, l_arrFltVolumeContainerInMicroliter);
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            	l_strStepReturnValueDispense = arrRetValues[2];
          }
        }
        if (i_blnEjectTips == ASWGLOBAL::BOOL::TRUE)
        {
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
        l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReportMPH(l_strStepReturnValueAspiration, l_strStepReturnValueDispense, l_seqTempAspirationPosition, l_seqTempDispensePosition, ASWGLOBAL::BOOL::FALSE);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
      else
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Dispense Mode"));
        _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported dispense mode detected."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    if (t_intPlatformType == 0)
    {
      if(0){
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_Channels_WithVolumeArray_ExpandedMix( device & ML_STAR, sequence i_seqAspirationPosition, sequence i_seqDispensePosition, variable & i_arrFltVolume[], variable i_strLiquidClassNameTransfer, variable i_intAspirateMixCycles, variable i_intDispenseMixCycles, variable & i_arrFltAspirateMixVolume[], variable & i_arrFltDispenseMixVolume[], variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnIncrementAspirationSequence, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_intPrewetCycles ) variable {
    private variable l_fltVolumeOfCurrentArrayIndex;
    private variable l_strComment;
    private variable l_strChannelPatternTransfer;
    private variable l_fltMeanvalueTransferVolume;
    private variable l_strStepReturnValueDispense;
    private variable l_intMainLoopTransferLiquids;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strChannelPattern;
    private variable l_blnSuccess;
    private variable l_strStepReturnValueAspiration;
    private variable l_intMixCycleAspiration;
    private variable l_strTypeOfLabware;
    private variable l_intCurrentDispenseMode;
    private variable l_intSizeArrFltVolume;
    private variable l_strTipCounterNameIntermediate;
    private variable l_intCurrentTipType;
    private variable l_intMixCycleDispense;
    private variable l_intArrayIndexCounter;
    private variable l_blnPerformedAdditionalVolumeTransfer;
    private variable l_intNumberOfSamples;
    private variable l_strCurrentDispenseMode;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_intArrFltVolumeIndex;
    private variable l_strInformationToBeUpdated;
    private sequence l_seqAspirationPositionPreselectedTrough;
    private sequence l_seqTipsIntermediate;
    private variable l_arrFltVolumeContainerInMicroliter[];
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqAspirationPosition);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqAspirationPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering independent volumes per channel"), Translate(""), Translate(""));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_blnSuccess = _DATA_CheckSequenceParameter(i_seqAspirationPosition, i_seqDispensePosition);
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    _DATA_SetRackVisibility(i_seqAspirationPosition, ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      l_intSizeArrFltVolume=i_arrFltVolume.GetSize();
      {
        for(l_intArrFltVolumeIndex = 0; l_intArrFltVolumeIndex < l_intSizeArrFltVolume;)
        {
          l_intArrFltVolumeIndex = l_intArrFltVolumeIndex + 1;
          l_fltVolumeOfCurrentArrayIndex=i_arrFltVolume.GetAt(l_intArrFltVolumeIndex-1);
          l_blnSuccess = _DATA_PlausibilityCheckVolume(l_fltVolumeOfCurrentArrayIndex, l_intCurrentTipType);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
      }
      _DATA_InterpreteLabwareID(ML_STAR, i_seqAspirationPosition, l_strTypeOfLabware);
      l_intNumberOfSamples = i_seqDispensePosition.GetCount();
      if (l_intCurrentDispenseMode == 2)
      {
        l_strCurrentDispenseMode = Translate("Part");
      }
      else
      {
        if (l_intCurrentDispenseMode == 4)
        {
          l_strCurrentDispenseMode = Translate("Part");
        }
        else
        {
          l_strCurrentDispenseMode = Translate("Empty");
        }
      }
      if (l_strCurrentDispenseMode == "Empty")
      {
        if (l_strTypeOfLabware == "trough")
        {
        }
        MECC::TraceComment(Translate("********** Now pipetting reagents to destination plate"));
        l_intArrayIndexCounter = 1;
        if (l_intCurrentTipType == 1)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
        }
        if (l_intCurrentTipType == 5)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
        }
        if (l_intCurrentTipType == 23)
        {
          l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
        }
        {
          l_intMainLoopTransferLiquids = 0;
          while (
             (i_seqDispensePosition.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, i_seqDispensePosition, 1, i_seqAspirationPosition, 1);
            l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
            if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              l_strChannelPattern = Translate("");
              l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPattern, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, i_seqDispensePosition);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
            }
            else
            {
              if (l_intMainLoopTransferLiquids == 1)
              {
                l_strChannelPattern = Translate("");
                l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPattern, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, i_seqDispensePosition);
                if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
                {
                  return (ASWGLOBAL::BOOL::FALSE);
                }
              }
            }
            _DATA_CheckChannelPattern(l_strChannelPattern, i_seqDispensePosition, l_strChannelPatternTransfer);
            l_intMixCycleDispense = i_intDispenseMixCycles;
            if (i_intPrewetCycles > 0)
            {
              if (l_intMainLoopTransferLiquids == 1)
              {
                l_intMixCycleAspiration = i_intPrewetCycles;
              }
            }
            if (l_intMainLoopTransferLiquids > 1)
            {
              l_intMixCycleAspiration = i_intAspirateMixCycles;
            }
            if (i_fltAspirateHeightFromBottom == 0)
            {
              _DATA_CalculateAverageVolumeOfVolumeArray(i_arrFltVolume, l_strChannelPatternTransfer, l_intArrayIndexCounter, 0, l_fltMeanvalueTransferVolume);
              l_blnSuccess = _DATA_ManageMultipleTroughs(ML_STAR, l_fltMeanvalueTransferVolume, 0, 0, i_seqAspirationPosition, i_strLiquidClassNameTransfer, l_strChannelPatternTransfer, l_blnPerformedAdditionalVolumeTransfer, l_seqAspirationPositionPreselectedTrough);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
              if (l_blnPerformedAdditionalVolumeTransfer == ASWGLOBAL::BOOL::TRUE)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              _DATA_ComputeVolumeInLabware(ML_STAR, l_seqAspirationPositionPreselectedTrough, l_strChannelPatternTransfer, l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
              t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterAspiration, l_arrFltVolumeContainerInMicroliter);
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                	l_strStepReturnValueAspiration = arrRetValues[2];
              }
            }
            if (i_fltDispenseHeightFromBottom == 0)
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
              _DATA_ComputeVolumeInLabware(ML_STAR, i_seqDispensePosition, l_strChannelPatternTransfer, l_strStepReturnValueDispense, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
              t_arrFltVolumeContainerInMicroliterDispense = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterDispense, l_arrFltVolumeContainerInMicroliter);
            }
            else
            {
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	l_strStepReturnValueDispense = arrRetValues[2];
              }
            }
            l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
            if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
            {
              if (l_intCurrentTipType == 1)
              {
                t_seqTips300 = HSLExtensions::Sequence::Copy(l_seqTipsIntermediate, 3);
              }
              if (l_intCurrentTipType == 5)
              {
                t_seqTips1000 = HSLExtensions::Sequence::Copy(l_seqTipsIntermediate, 3);
              }
              if (l_intCurrentTipType == 23)
              {
                t_seqTips50 = HSLExtensions::Sequence::Copy(l_seqTipsIntermediate, 3);
              }
              l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPattern);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
            }
            l_intArrayIndexCounter = l_intArrayIndexCounter + t_intNumberOfAllAvailableChannels;
            if (i_blnIncrementAspirationSequence == ASWGLOBAL::BOOL::TRUE)
            {
              SeqIncrement(i_seqAspirationPosition, t_intNumberOfAllAvailableChannels);
            }
            SeqIncrement(i_seqDispensePosition, t_intNumberOfAllAvailableChannels);
            if (
               (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
          i_seqAspirationPosition.SetMax(i_seqAspirationPosition.GetTotal());
          i_seqDispensePosition.SetCurrentPosition(1);
          i_seqAspirationPosition.SetCurrentPosition(1);
        }
        if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
        {
          l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPattern);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
        }
      }
      if (l_strCurrentDispenseMode == "Part")
      {
        MECC::TraceComment(Translate("WRONG DISPENSE MODE DETECTED"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, t_strFunctionName, Translate(" Error Indication - Unsupported Dispense Mode"));
        _DATA_IntegratedAbortHandler(t_strFunctionName, Translate("Unsupported dispense mode detected."));
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_Channels_WithVolumeArray_1by1_MultiDispense( device & ML_STAR, sequence & i_arr_seqAspirationPosition[], sequence i_seqDispensePosition, variable & i_arr_fltVolumeAspiration[], variable & i_arr_fltVolumeDispense[], variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_intPrewetCycles, variable & i_arr_blnConsecutiveAspiration[] ) variable {
    private variable l_strComment;
    private variable l_strChannelPatternTransfer;
    private variable l_strStepReturnValueDispense;
    private variable l_intMainLoopTransferLiquids;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strChannelPattern;
    private variable l_blnSuccess;
    private variable l_intArrayIndexCounterDispense;
    private variable l_strStepReturnValueAspiration;
    private variable l_intMixCycleAspiration;
    private variable l_intConsecutiveArraySize;
    private variable l_strTypeOfLabware;
    private variable l_intCurrentDispenseMode;
    private variable l_intInputArraySize;
    private variable l_strTipCounterNameIntermediate;
    private variable l_intCurrentTipType;
    private variable l_intMixCycleDispense;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable l_intNumberOfSamples;
    private variable l_intArrayIndexCounterAspirate;
    private variable l_strInformationToBeUpdated;
    private variable l_intIndexBucket;
    private variable l_strLabwareIDOfTargetSequence;
    private sequence l_seqTipsIntermediate;
    private variable l_arr_fltVolumeDispense[];
    private variable l_arrFltVolumeContainerInMicroliter[];
    private variable l_arrPrimaryAspirations[];
    private variable l_arr_strChannelPattern[];
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_arr_seqAspirationPosition.ElementAt( 1 -1));
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_arr_seqAspirationPosition.ElementAt( 1 -1));
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering independent volumes per channel"), Translate(""), Translate(""));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    l_arr_fltVolumeDispense=i_arr_fltVolumeDispense;
    l_intInputArraySize=l_arr_fltVolumeDispense.GetSize();
    l_intInputArraySize = 8 - l_intInputArraySize;
    {
      for(loopCounter1 = 0; loopCounter1 < l_intInputArraySize;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_arr_fltVolumeDispense.AddAsLast(0);
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Temp dispense volume array"), l_arr_fltVolumeDispense);
    l_arrPrimaryAspirations = HSLExtensions::Array::FindValue(i_arr_blnConsecutiveAspiration, 0);
    l_intInputArraySize=l_arrPrimaryAspirations.GetSize();
    l_intConsecutiveArraySize=i_arr_blnConsecutiveAspiration.GetSize();
    l_arr_strChannelPattern.SetSize(0);
    l_arr_strChannelPattern.AddAsLast(Translate("10000000"));
    l_arr_strChannelPattern.AddAsLast(Translate("01000000"));
    l_arr_strChannelPattern.AddAsLast(Translate("00100000"));
    l_arr_strChannelPattern.AddAsLast(Translate("00010000"));
    l_arr_strChannelPattern.AddAsLast(Translate("00001000"));
    l_arr_strChannelPattern.AddAsLast(Translate("00000100"));
    l_arr_strChannelPattern.AddAsLast(Translate("00000010"));
    l_arr_strChannelPattern.AddAsLast(Translate("00000001"));
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    _DATA_SetRackVisibility(i_arr_seqAspirationPosition.ElementAt( 1 -1), ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      _DATA_InterpreteLabwareID(ML_STAR, i_arr_seqAspirationPosition.ElementAt( 1 -1), l_strTypeOfLabware);
      l_intNumberOfSamples = i_seqDispensePosition.GetCount();
      MECC::TraceComment(Translate("********** Now pipetting reagents to destination plate"));
      if (l_intCurrentTipType == 1)
      {
        l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
      }
      if (l_intCurrentTipType == 5)
      {
        l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
      }
      if (l_intCurrentTipType == 23)
      {
        l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
      }
      l_intArrayIndexCounterAspirate = 1;
      if (i_arr_fltVolumeAspiration.ElementAt( 1 -1) == 0)
      {
        l_intArrayIndexCounterAspirate = l_intArrayIndexCounterAspirate + 1;
      }
      {
        for(loopCounter2 = 0; loopCounter2 < l_intInputArraySize;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
          {
            l_strChannelPattern = Translate("");
            l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPattern, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, i_seqDispensePosition);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
          }
          else
          {
            if (loopCounter2 == 1)
            {
              l_strChannelPattern = Translate("");
              l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPattern, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, i_seqDispensePosition);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
            }
          }
          _DATA_CheckChannelPattern(l_strChannelPattern, i_seqDispensePosition, l_strChannelPatternTransfer);
          l_intMixCycleDispense = i_intMixCycles;
          if (i_intPrewetCycles > 0)
          {
            if (l_intMainLoopTransferLiquids == 1)
            {
              l_intMixCycleAspiration = i_intPrewetCycles;
            }
          }
          if (l_intMainLoopTransferLiquids > 1)
          {
            l_intMixCycleAspiration = i_intMixCycles;
          }
          if (i_fltAspirateHeightFromBottom == 0)
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	l_strStepReturnValueAspiration = arrRetValues[2];
            }
            if(0){
              _DATA_ComputeVolumeInLabware(ML_STAR, i_arr_seqAspirationPosition.ElementAt( l_intArrayIndexCounterAspirate -1), l_arr_strChannelPattern.ElementAt( loopCounter2 -1), l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
            }
            t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterAspiration, l_arrFltVolumeContainerInMicroliter);
          }
          else
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              	l_strStepReturnValueAspiration = arrRetValues[2];
            }
          }
          l_intIndexBucket = l_intArrayIndexCounterAspirate + 1;
          if (l_intIndexBucket <= l_intConsecutiveArraySize)
          {
            if (i_arr_blnConsecutiveAspiration.ElementAt( l_intIndexBucket -1) == 1)
            {
              l_intArrayIndexCounterAspirate = l_intArrayIndexCounterAspirate + 1;
              if(0){
                TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("ASP INDEX "), l_intArrayIndexCounterAspirate, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("loop index "), loopCounter2, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("asp array 1"), i_arr_fltVolumeAspiration);
                TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("channel pattern"), l_arr_strChannelPattern);
                TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, i_arr_seqAspirationPosition.ElementAt( l_intArrayIndexCounterAspirate -1));
                TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("ASP vol "), i_arr_fltVolumeAspiration.ElementAt( l_intArrayIndexCounterAspirate -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("ASP pattern "), l_arr_strChannelPattern.ElementAt( loopCounter2 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              }
              if (i_fltAspirateHeightFromBottom == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
                if(0){
                  _DATA_ComputeVolumeInLabware(ML_STAR, i_arr_seqAspirationPosition.ElementAt( l_intArrayIndexCounterAspirate -1), l_arr_strChannelPattern.ElementAt( loopCounter2 -1), l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
                }
                t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterAspiration, l_arrFltVolumeContainerInMicroliter);
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
            }
          }
          l_intArrayIndexCounterAspirate = l_intArrayIndexCounterAspirate + 1;
        }
      }
      l_intArrayIndexCounterDispense = 1;
      {
        l_intMainLoopTransferLiquids = 0;
        while (
           (i_seqDispensePosition.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, i_seqDispensePosition, 1);
          l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
          if(0){
            TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("DISP INDEX "), l_intArrayIndexCounterDispense, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("loop index "), l_intMainLoopTransferLiquids, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("disp array 1"), l_arr_fltVolumeDispense);
            TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("channel pattern"), l_arr_strChannelPattern);
            TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
            TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("diSP vol "), i_arr_fltVolumeDispense.ElementAt( l_intArrayIndexCounterDispense -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("diSP pattern "), l_strChannelPatternTransfer, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          }
          if (i_fltDispenseHeightFromBottom == 0)
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	l_strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_ComputeVolumeInLabware(ML_STAR, i_seqDispensePosition, l_strChannelPatternTransfer, l_strStepReturnValueDispense, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
            t_arrFltVolumeContainerInMicroliterDispense = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterDispense, l_arrFltVolumeContainerInMicroliter);
          }
          else
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	l_strStepReturnValueDispense = arrRetValues[2];
            }
          }
          l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
          l_intArrayIndexCounterDispense = l_intArrayIndexCounterDispense + t_intNumberOfAllAvailableChannels;
          SeqIncrement(i_seqDispensePosition, t_intNumberOfAllAvailableChannels);
          if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
          {
            if (l_intCurrentTipType == 1)
            {
              t_seqTips300 = HSLExtensions::Sequence::Copy(l_seqTipsIntermediate, 3);
            }
            if (l_intCurrentTipType == 5)
            {
              t_seqTips1000 = HSLExtensions::Sequence::Copy(l_seqTipsIntermediate, 3);
            }
            if (l_intCurrentTipType == 23)
            {
              t_seqTips50 = HSLExtensions::Sequence::Copy(l_seqTipsIntermediate, 3);
            }
            l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPattern);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
          }
          if (
             (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
        i_seqDispensePosition.SetCurrentPosition(1);
      }
      if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
      {
        l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPattern);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PIP_Channels_WithVolumeArray_1by1_SingleDispense( device & ML_STAR, sequence & i_arr_seqAspirationPosition[], sequence i_seqDispensePosition, variable & i_arr_fltVolumeAspiration[], variable & i_arr_fltVolumeDispense[], variable i_strLiquidClassNameTransfer, variable i_intMixCycles, variable i_fltAspirateHeightFromBottom, variable i_fltDispenseHeightFromBottom, variable i_blnTipExchangeDuringTransfer, variable i_blnActivateLiquidFollowingAtAspiration, variable i_blnActivateLiquidFollowingAtDispense, variable i_intPrewetCycles, variable & i_arr_blnConsecutiveAspiration[] ) variable {
    private variable l_strComment;
    private variable l_strChannelPatternTransfer;
    private variable l_strStepReturnValueDispense;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_intMainLoopTransferLiquids;
    private variable l_strChannelPattern;
    private variable l_blnSuccess;
    private variable l_intArrayIndexCounterDispense;
    private variable l_strStepReturnValueAspiration;
    private variable l_intNumberOfAspirationInThisSet;
    private variable l_intMixCycleAspiration;
    private variable l_intConsecutiveArraySize;
    private variable l_intCurrentDispenseMode;
    private variable l_strTypeOfLabware;
    private variable l_strTipCounterNameIntermediate;
    private variable l_intCurrentTipType;
    private variable l_intInputArraySize;
    private variable l_intMixCycleDispense;
    private variable loopCounter1;
    private variable l_intNumberOfAspirationCounter;
    private variable loopCounter2;
    private variable l_intNumberOfSamples;
    private variable l_intArrayIndexCounterAspirate;
    private variable l_intIndexBucket;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDOfTargetSequence;
    private sequence l_seqTipsIntermediate;
    private variable l_arr_fltVolumeDispense[];
    private variable l_arrFltVolumeContainerInMicroliter[];
    private variable l_arrPrimaryAspirations[];
    private variable l_arr_strChannelPattern[];
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_arr_seqAspirationPosition.ElementAt( 1 -1));
    TRACELEVEL::TraceSequenceParameter(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_arr_seqAspirationPosition.ElementAt( 1 -1));
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqDispensePosition);
    l_strInformationToBeUpdated = StrConcat8(Translate("Pipette reagents"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Transfering independent volumes per channel"), Translate(""), Translate(""));
    l_blnSuccess = _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    l_arr_fltVolumeDispense=i_arr_fltVolumeDispense;
    l_intInputArraySize=l_arr_fltVolumeDispense.GetSize();
    l_intInputArraySize = 8 - l_intInputArraySize;
    {
      for(loopCounter1 = 0; loopCounter1 < l_intInputArraySize;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_arr_fltVolumeDispense.AddAsLast(0);
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Temp dispense volume array"), l_arr_fltVolumeDispense);
    l_arrPrimaryAspirations = HSLExtensions::Array::FindValue(i_arr_blnConsecutiveAspiration, 0);
    l_intInputArraySize=l_arrPrimaryAspirations.GetSize();
    l_intConsecutiveArraySize=i_arr_blnConsecutiveAspiration.GetSize();
    l_arr_strChannelPattern.SetSize(0);
    l_arr_strChannelPattern.AddAsLast(Translate("10000000"));
    l_arr_strChannelPattern.AddAsLast(Translate("01000000"));
    l_arr_strChannelPattern.AddAsLast(Translate("00100000"));
    l_arr_strChannelPattern.AddAsLast(Translate("00010000"));
    l_arr_strChannelPattern.AddAsLast(Translate("00001000"));
    l_arr_strChannelPattern.AddAsLast(Translate("00000100"));
    l_arr_strChannelPattern.AddAsLast(Translate("00000010"));
    l_arr_strChannelPattern.AddAsLast(Translate("00000001"));
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    _DATA_SetRackVisibility(i_arr_seqAspirationPosition.ElementAt( 1 -1), ML_STAR);
    _DATA_SetRackVisibility(i_seqDispensePosition, ML_STAR);
    if (t_blnDeactivatePipettingStepsForTransportTests == ASWGLOBAL::BOOL::FALSE)
    {
      _DATA_GetTipTypeAndDispenseModeOfLiquidClass(i_strLiquidClassNameTransfer, l_intCurrentTipType, l_intCurrentDispenseMode);
      _DATA_InterpreteLabwareID(ML_STAR, i_arr_seqAspirationPosition.ElementAt( 1 -1), l_strTypeOfLabware);
      l_intNumberOfSamples = i_seqDispensePosition.GetCount();
      MECC::TraceComment(Translate("********** Now pipetting reagents to destination plate"));
      l_intArrayIndexCounterDispense = 1;
      l_intArrayIndexCounterAspirate = 1;
      if (i_arr_fltVolumeAspiration.ElementAt( 1 -1) == 0)
      {
        l_intArrayIndexCounterAspirate = l_intArrayIndexCounterAspirate + 1;
      }
      if (l_intCurrentTipType == 1)
      {
        l_strTipCounterNameIntermediate = t_strTipCounterNameTip300;
      }
      if (l_intCurrentTipType == 5)
      {
        l_strTipCounterNameIntermediate = t_strTipCounterNameTip1000;
      }
      if (l_intCurrentTipType == 23)
      {
        l_strTipCounterNameIntermediate = t_strTipCounterNameTip50;
      }
      {
        l_intMainLoopTransferLiquids = 0;
        while (
           (i_seqDispensePosition.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, i_seqDispensePosition, 1);
          l_intMainLoopTransferLiquids = l_intMainLoopTransferLiquids + 1;
          l_intNumberOfAspirationCounter = l_intMainLoopTransferLiquids * 8;
          if (l_intNumberOfAspirationCounter <= l_intInputArraySize)
          {
            l_intNumberOfAspirationInThisSet = 8;
          }
          else
          {
            l_intNumberOfAspirationInThisSet = l_intInputArraySize - l_intNumberOfAspirationCounter + 8;
          }
          Trace(l_intNumberOfAspirationInThisSet);
          Trace(l_intNumberOfAspirationCounter);
          if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
          {
            l_strChannelPattern = Translate("");
            l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPattern, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, i_seqDispensePosition);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
          }
          else
          {
            if (loopCounter2 == 1)
            {
              l_strChannelPattern = Translate("");
              l_blnSuccess = _PickUpTipsChannels(ML_STAR, l_strTipCounterNameIntermediate, l_strChannelPattern, TIP_TOOLS::OptimizationMode::OptimizedTipPickup, i_seqDispensePosition);
              if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
              {
                return (ASWGLOBAL::BOOL::FALSE);
              }
            }
          }
          _DATA_CheckChannelPattern(l_strChannelPattern, i_seqDispensePosition, l_strChannelPatternTransfer);
          {
            for(loopCounter2 = 0; loopCounter2 < l_intNumberOfAspirationInThisSet;)
            {
              loopCounter2 = loopCounter2 + 1;
              l_intMixCycleDispense = i_intMixCycles;
              if (i_intPrewetCycles > 0)
              {
                if (l_intMainLoopTransferLiquids == 1)
                {
                  l_intMixCycleAspiration = i_intPrewetCycles;
                }
              }
              if (l_intMainLoopTransferLiquids > 1)
              {
                l_intMixCycleAspiration = i_intMixCycles;
              }
              if (i_fltAspirateHeightFromBottom == 0)
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
                if(0){
                  _DATA_ComputeVolumeInLabware(ML_STAR, i_arr_seqAspirationPosition.ElementAt( l_intArrayIndexCounterAspirate -1), l_arr_strChannelPattern.ElementAt( loopCounter2 -1), l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
                }
                t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterAspiration, l_arrFltVolumeContainerInMicroliter);
              }
              else
              {
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  	l_strStepReturnValueAspiration = arrRetValues[2];
                }
              }
              l_intIndexBucket = l_intArrayIndexCounterAspirate + 1;
              if (l_intIndexBucket <= l_intConsecutiveArraySize)
              {
                if (i_arr_blnConsecutiveAspiration.ElementAt( l_intIndexBucket -1) == 1)
                {
                  l_intArrayIndexCounterAspirate = l_intArrayIndexCounterAspirate + 1;
                  if(0){
                    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("ASP INDEX "), l_intArrayIndexCounterAspirate, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("loop index "), loopCounter2, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("asp array 1"), i_arr_fltVolumeAspiration);
                    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("channel pattern"), l_arr_strChannelPattern);
                    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, i_arr_seqAspirationPosition.ElementAt( l_intArrayIndexCounterAspirate -1));
                    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("ASP vol "), i_arr_fltVolumeAspiration.ElementAt( l_intArrayIndexCounterAspirate -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("ASP pattern "), l_arr_strChannelPattern.ElementAt( loopCounter2 -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                  }
                  if (i_fltAspirateHeightFromBottom == 0)
                  {
                    {
                      	variable arrRetValues[];
                      	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      	l_strStepReturnValueAspiration = arrRetValues[2];
                    }
                    if(0){
                      _DATA_ComputeVolumeInLabware(ML_STAR, i_arr_seqAspirationPosition.ElementAt( l_intArrayIndexCounterAspirate -1), l_arr_strChannelPattern.ElementAt( loopCounter2 -1), l_strStepReturnValueAspiration, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
                    }
                    t_arrFltVolumeContainerInMicroliterAspiration = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterAspiration, l_arrFltVolumeContainerInMicroliter);
                  }
                  else
                  {
                    {
                      	variable arrRetValues[];
                      	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      	l_strStepReturnValueAspiration = arrRetValues[2];
                    }
                  }
                }
              }
              l_intArrayIndexCounterAspirate = l_intArrayIndexCounterAspirate + 1;
            }
          }
          if(0){
            TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("DISP INDEX "), l_intArrayIndexCounterDispense, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("loop index "), l_intMainLoopTransferLiquids, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("disp array 1"), l_arr_fltVolumeDispense);
            TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("channel pattern"), l_arr_strChannelPattern);
            TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, i_seqDispensePosition);
            TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("diSP vol "), i_arr_fltVolumeDispense.ElementAt( l_intArrayIndexCounterDispense -1), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("diSP pattern "), l_strChannelPatternTransfer, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          }
          if (i_fltDispenseHeightFromBottom == 0)
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	l_strStepReturnValueDispense = arrRetValues[2];
            }
            _DATA_ComputeVolumeInLabware(ML_STAR, i_seqDispensePosition, l_strChannelPatternTransfer, l_strStepReturnValueDispense, ASWGLOBAL::BOOL::FALSE, l_arrFltVolumeContainerInMicroliter);
            t_arrFltVolumeContainerInMicroliterDispense = HSLExtensions::Array::Concat(t_arrFltVolumeContainerInMicroliterDispense, l_arrFltVolumeContainerInMicroliter);
          }
          else
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              	l_strStepReturnValueDispense = arrRetValues[2];
            }
          }
          l_blnSuccess = _DATA_AnalyseStepReturnValueOfPipettingStepAndWriteToReport(l_strStepReturnValueAspiration, l_strStepReturnValueDispense);
          if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
          {
            return (ASWGLOBAL::BOOL::FALSE);
          }
          l_intArrayIndexCounterDispense = l_intArrayIndexCounterDispense + t_intNumberOfAllAvailableChannels;
          SeqIncrement(i_seqDispensePosition, t_intNumberOfAllAvailableChannels);
          if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::TRUE)
          {
            if (l_intCurrentTipType == 1)
            {
              t_seqTips300 = HSLExtensions::Sequence::Copy(l_seqTipsIntermediate, 3);
            }
            if (l_intCurrentTipType == 5)
            {
              t_seqTips1000 = HSLExtensions::Sequence::Copy(l_seqTipsIntermediate, 3);
            }
            if (l_intCurrentTipType == 23)
            {
              t_seqTips50 = HSLExtensions::Sequence::Copy(l_seqTipsIntermediate, 3);
            }
            l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPattern);
            if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
            {
              return (ASWGLOBAL::BOOL::FALSE);
            }
          }
          if (
             (i_seqDispensePosition.GetCurrentPosition() > 0 && i_seqDispensePosition.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        i_seqDispensePosition.SetMax(i_seqDispensePosition.GetTotal());
        i_seqDispensePosition.SetCurrentPosition(1);
      }
      if (i_blnTipExchangeDuringTransfer == ASWGLOBAL::BOOL::FALSE)
      {
        l_blnSuccess = _EjectTips(ML_STAR, l_strChannelPattern);
        if (l_blnSuccess != ASWGLOBAL::BOOL::TRUE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }
} // library namespace
