#pragma once
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"
#include "templates\\HSLPipetteWizard.hsl"
#include "HSLSchedCCLib.hs_"

namespace REAGENTPLATING_CONTROLLER {
  variable t_strFunctionName;
  variable t_strLibraryName;
  private function Abstract(  ) void ;
  function ReagentPlateCreation_SpecifyNumberOfSourceTubes( variable i_intNumberOfSamples, variable i_intNumberOfIntermediatePlateWells, variable i_intNumberOfTubes, variable i_fltVolumePerSample, variable i_fltDeadVolumeOfTube, variable i_fltDeadVolumeOfIntermediatePlate, variable i_fltDeadVolumeOfLiquidTransfer, sequence & i_seqTemplate, variable i_intStartPosition, variable i_blnCreateMultiDispensePattern, sequence & o_seqAspiration, variable & o_arr_fltVolumeAspiration[], variable & o_arr_fltVolumeDispense[], variable & o_arr_fltVolumePerTube[], variable & o_arr_intNumberOfReactionsPerTube[], variable & o_arr_intNumberOfReactionsPerWell[] ) void ;
  function ReagentPlateCreation_WithPartialSourceTubes( variable i_intNumberOfSamples, variable i_intNumberOfIntermediatePlateWells, variable i_fltVolumePerSample, variable i_fltVolumeOfPartialTube, variable i_fltVolumeOfFullTube, variable i_fltDeadVolumeOfTube, variable i_fltDeadVolumeOfIntermediatePlate, variable i_fltDeadVolumeOfLiquidTransfer, sequence i_seqTemplate, variable i_intStartPosition, variable i_blnCreateMultiDispensePattern, sequence & o_arr_seqAspiration[], variable & o_arr_fltVolumeAspiration[], variable & o_arr_fltVolumeDispense[], variable & o_arr_blnConsecutiveAspiration[], variable & o_arr_intNumberOfReactionsPerTube[], variable & o_arr_intNumberOfReactionsPerWell[] ) void ;
  function ReagentPlateLoadInformation_SpecifyNumberOfSourceTubes( variable i_strReagentName, variable i_strTubeType, variable i_intStartPosition, variable & i_arr_fltVolumes[], variable & o_arr_strReagentName[], variable & o_arr_strVolume[], variable & o_arr_strTubeType[] ) void ;
  function ReagentPlateLoadInformation_WithPartialSourceTubes( variable i_strReagentName, variable i_fltPartialTubeVolume, variable i_fltPartialTubeDeadVolume, variable i_strTubeType, variable i_intStartPosition, variable i_intNumberOfTubes, variable & o_arr_strReagentName[], variable & o_arr_strVolume[], variable & o_arr_strTubeType[] ) void ;
  function ReagentPlateSequences( device & i_instrument, sequence i_seqTemplateAspirate, sequence i_seqTemplateDispense, variable i_intAspirateStartPosition, variable i_intNumberOfSamples, variable i_intNumberOfIntermediateWells, sequence & o_seqFormatAspirate, sequence & o_seqChannelsAspirate, sequence & o_seqChannelsDispense, sequence & o_seqMPHAspirate, sequence & o_seqMPHDispense ) void ;
  private function _FormatSequenceForSize( device & i_instrument, sequence & i_seqTemplate, variable i_intStartPoint, variable i_intSize, sequence & o_seqFormattedForSize ) void ;
  private function _VersionHistory(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  private function Abstract(  ) void {
    t_strFunctionName = Translate("");
    t_strLibraryName = Translate("");
  }

  function ReagentPlateSequences( device & i_instrument, sequence i_seqTemplateAspirate, sequence i_seqTemplateDispense, variable i_intAspirateStartPosition, variable i_intNumberOfSamples, variable i_intNumberOfIntermediateWells, sequence & o_seqFormatAspirate, sequence & o_seqChannelsAspirate, sequence & o_seqChannelsDispense, sequence & o_seqMPHAspirate, sequence & o_seqMPHDispense ) void {
    private variable l_intNumberOfMPHCycles;
    private variable l_strPositionID;
    private variable l_intChannelPosition;
    private variable l_intCurrentPositionDispense;
    private variable l_intNumberOfChannelWells;
    private variable l_intAspirateEndPosition;
    private variable l_intNumberOfMPHWells;
    private variable loopCounter1;
    private variable l_intCurrentPositionAspirate;
    private variable loopCounter3;
    private variable l_strLabwareID;
    private variable l_strComment;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_intCurrentPositionAspirate = i_seqTemplateAspirate.GetCurrentPosition();
    l_intCurrentPositionDispense = i_seqTemplateDispense.GetCurrentPosition();
    l_intAspirateEndPosition = i_intAspirateStartPosition + i_intNumberOfIntermediateWells - 1;
    i_seqTemplateAspirate.SetCurrentPosition(i_intAspirateStartPosition);
    {
      for(loopCounter3 = 0; loopCounter3 < i_intNumberOfIntermediateWells;)
      {
        loopCounter3 = loopCounter3 + 1;
        l_strLabwareID = SeqGetLabwareId(i_seqTemplateAspirate);
        l_strPositionID = SeqGetPositionId(i_seqTemplateAspirate);
        SeqAdd(o_seqFormatAspirate, l_strLabwareID, l_strPositionID);
        SeqIncrement(i_seqTemplateAspirate, 1);
      }
    }
    o_seqFormatAspirate.SetCurrentPosition(1);
    if (i_intNumberOfIntermediateWells >= 8)
    {
      if(0){
        l_intNumberOfChannelWells = i_intNumberOfSamples % i_intNumberOfIntermediateWells;
        l_intNumberOfMPHCycles = i_intNumberOfSamples / i_intNumberOfIntermediateWells;
        l_intNumberOfMPHWells = l_intNumberOfMPHCycles * i_intNumberOfIntermediateWells;
      }
      l_intNumberOfChannelWells = i_intNumberOfSamples % 8;
      l_intNumberOfMPHWells = i_intNumberOfSamples - l_intNumberOfChannelWells;
      if (l_intNumberOfChannelWells > 0)
      {
        l_intChannelPosition = i_intNumberOfSamples - l_intNumberOfChannelWells + 1;
      }
      i_seqTemplateAspirate.SetCurrentPosition(i_intAspirateStartPosition);
      {
        for(loopCounter1 = 0; loopCounter1 < l_intNumberOfChannelWells;)
        {
          loopCounter1 = loopCounter1 + 1;
          l_strLabwareID = SeqGetLabwareId(i_seqTemplateAspirate);
          l_strPositionID = SeqGetPositionId(i_seqTemplateAspirate);
          SeqAdd(o_seqChannelsAspirate, l_strLabwareID, l_strPositionID);
          SeqIncrement(i_seqTemplateAspirate, 1);
        }
      }
      o_seqChannelsAspirate.SetCurrentPosition(1);
      i_seqTemplateDispense.SetCurrentPosition(l_intChannelPosition);
      {
        for(loopCounter1 = 0; loopCounter1 < l_intNumberOfChannelWells;)
        {
          loopCounter1 = loopCounter1 + 1;
          l_strLabwareID = SeqGetLabwareId(i_seqTemplateDispense);
          l_strPositionID = SeqGetPositionId(i_seqTemplateDispense);
          SeqAdd(o_seqChannelsDispense, l_strLabwareID, l_strPositionID);
          SeqIncrement(i_seqTemplateDispense, 1);
        }
      }
      o_seqChannelsDispense.SetCurrentPosition(1);
      i_seqTemplateAspirate.SetCurrentPosition(i_intAspirateStartPosition);
      {
        for(loopCounter3 = 0; loopCounter3 < i_intNumberOfIntermediateWells;)
        {
          loopCounter3 = loopCounter3 + 1;
          l_strLabwareID = SeqGetLabwareId(i_seqTemplateAspirate);
          l_strPositionID = SeqGetPositionId(i_seqTemplateAspirate);
          SeqAdd(o_seqMPHAspirate, l_strLabwareID, l_strPositionID);
          SeqIncrement(i_seqTemplateAspirate, 1);
        }
      }
      o_seqMPHAspirate.SetCurrentPosition(1);
      i_seqTemplateDispense.SetCurrentPosition(l_intCurrentPositionDispense);
      {
        for(loopCounter1 = 0; loopCounter1 < l_intNumberOfMPHWells;)
        {
          loopCounter1 = loopCounter1 + 1;
          l_strLabwareID = SeqGetLabwareId(i_seqTemplateDispense);
          l_strPositionID = SeqGetPositionId(i_seqTemplateDispense);
          SeqAdd(o_seqMPHDispense, l_strLabwareID, l_strPositionID);
          SeqIncrement(i_seqTemplateDispense, 1);
        }
      }
      o_seqMPHDispense.SetCurrentPosition(1);
    }
    else
    {
      _FormatSequenceForSize(i_instrument, o_seqFormatAspirate, 1, i_intNumberOfSamples, o_seqChannelsAspirate);
      _FormatSequenceForSize(i_instrument, i_seqTemplateDispense, l_intCurrentPositionDispense, i_intNumberOfSamples, o_seqChannelsDispense);
    }
    i_seqTemplateAspirate.SetCurrentPosition(l_intCurrentPositionAspirate);
    i_seqTemplateDispense.SetCurrentPosition(l_intCurrentPositionDispense);
    MECC::TraceComment(Translate("o_seqFormatAspirate"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seqFormatAspirate);
    MECC::TraceComment(Translate("o_seqChannelsAspirate"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seqChannelsAspirate);
    MECC::TraceComment(Translate("o_seqChannelsDispense"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seqChannelsDispense);
    MECC::TraceComment(Translate("o_seqMPHAspirate"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seqMPHAspirate);
    MECC::TraceComment(Translate("o_seqMPHDispense"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seqMPHDispense);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
  }

  function ReagentPlateCreation_WithPartialSourceTubes( variable i_intNumberOfSamples, variable i_intNumberOfIntermediatePlateWells, variable i_fltVolumePerSample, variable i_fltVolumeOfPartialTube, variable i_fltVolumeOfFullTube, variable i_fltDeadVolumeOfTube, variable i_fltDeadVolumeOfIntermediatePlate, variable i_fltDeadVolumeOfLiquidTransfer, sequence i_seqTemplate, variable i_intStartPosition, variable i_blnCreateMultiDispensePattern, sequence & o_arr_seqAspiration[], variable & o_arr_fltVolumeAspiration[], variable & o_arr_fltVolumeDispense[], variable & o_arr_blnConsecutiveAspiration[], variable & o_arr_intNumberOfReactionsPerTube[], variable & o_arr_intNumberOfReactionsPerWell[] ) void {
    private variable l_strComment;
    o_arr_seqAspiration.SetSize( 0);
    o_arr_fltVolumeAspiration.SetSize( 0);
    o_arr_fltVolumeDispense.SetSize( 0);
    o_arr_blnConsecutiveAspiration.SetSize( 0);
    o_arr_intNumberOfReactionsPerTube.SetSize( 0);
    o_arr_intNumberOfReactionsPerWell.SetSize( 0);
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    if(0){
      {
        variable fltActionVolume, fltNumberOfTips, fltNeededVolumeBucket, fltNumberOfSamplesBucket(0), fltNumberOfReactionsBucket, fltDeadVolumeBucket, fltDeadVolumeTransfer, intSequencePositionReset, i, j(1), k(1), m(1), intSize;
        sequence seqAspirationBucket;
        //Store original sequence position for reset and prepare for input start position
        intSequencePositionReset = i_seqTemplate.GetCurrentPosition();
        i_seqTemplate.SetCurrentPosition(i_intStartPosition);
        //Prepare dead volume variables
        fltDeadVolumeTransfer = 1 + i_fltDeadVolumeOfLiquidTransfer / 100.0;
        fltDeadVolumeBucket = i_fltDeadVolumeOfIntermediatePlate;
        //Calculate the number of tips used, used to equal to 8 if == 16
        fltNumberOfTips = i_intNumberOfIntermediatePlateWells;
        if(i_blnCreateMultiDispensePattern == 1 && i_intNumberOfIntermediatePlateWells == 16) fltNumberOfTips = 8;
        TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "Number of tips: ", fltNumberOfTips, "", "", "", "", "", "", "", "");
        //Calculate the number of reactions per intermediate plate well
        o_arr_intNumberOfReactionsPerWell.SetSize(i_intNumberOfIntermediatePlateWells);
        for(i = 1;i <= i_intNumberOfSamples; i++){
             o_arr_intNumberOfReactionsPerWell.SetAt(j - 1,k);
             if(j < i_intNumberOfIntermediatePlateWells) j++;
             else j = 1;
             if(i % i_intNumberOfIntermediatePlateWells == 0) k++;
           }
        //o_arr_intNumberOfReactionsPerWell now contains the namesake in [i_intNumberOfIntermediatePlateWells] elements
        TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Number of reactions per well: ", o_arr_intNumberOfReactionsPerWell);
        //Determine the current action volume and initiate o_arr_intNumberOfReactionsPerTube and index
        if(i_fltVolumeOfPartialTube == 0){
          	fltActionVolume = i_fltVolumeOfFullTube - i_fltDeadVolumeOfTube;
          	o_arr_intNumberOfReactionsPerTube.AddAsLast(0);
          	o_arr_intNumberOfReactionsPerTube.AddAsLast(0);
             i_seqTemplate.Increment(1);
          	m++;
        	}
        else{
             fltActionVolume = i_fltVolumeOfPartialTube - i_fltDeadVolumeOfTube;
             if(fltActionVolume <= 0){
            	   fltActionVolume = i_fltVolumeOfFullTube - i_fltDeadVolumeOfTube;
            	   o_arr_intNumberOfReactionsPerTube.AddAsLast(0);
            	   o_arr_intNumberOfReactionsPerTube.AddAsLast(0);
                  i_seqTemplate.Increment(1);
            	   m++;
          	   }
             else o_arr_intNumberOfReactionsPerTube.AddAsLast(0);
           }
        TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "Action volume 1: ", fltActionVolume, "", "", "", "", "", "", "", "");
        TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Number of reactions per tube 1: ", o_arr_intNumberOfReactionsPerTube);
        //Determine the aspiration volume and consecutive boolean arrays, with respect to depletion of the partial tube.  Generate o_arr_seqAspiration...1:1 with o_arr_blnConsecutiveAspiration
        for(i = 1;i <= fltNumberOfTips; i++){
             //Determine the number of reactions per aspiration
             fltNumberOfReactionsBucket = o_arr_intNumberOfReactionsPerWell.GetAt(i - 1);
             if(i_blnCreateMultiDispensePattern == 1 && i_intNumberOfIntermediatePlateWells == 16){
                  fltNumberOfReactionsBucket = fltNumberOfReactionsBucket + o_arr_intNumberOfReactionsPerWell.GetAt(i + 7);
                  fltDeadVolumeBucket = i_fltDeadVolumeOfIntermediatePlate * 2;
                }
             TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "Number of reactions bucket: ", fltNumberOfReactionsBucket, "", "", "", "", "", "", "", "");
             //Determine the volume per aspiration
             fltNeededVolumeBucket = fltNumberOfReactionsBucket * i_fltVolumePerSample * fltDeadVolumeTransfer + fltDeadVolumeBucket;
             TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "Volume needed bucket: ", fltNeededVolumeBucket, "", "", "", "", "", "", "", "");
             if(fltNeededVolumeBucket <= fltActionVolume){
                  //Aspirate from current tube...partial or new
                  o_arr_fltVolumeAspiration.AddAsLast(fltNeededVolumeBucket);
                  o_arr_blnConsecutiveAspiration.AddAsLast(0);
                  seqAspirationBucket.Add(i_seqTemplate.GetLabwareId(), i_seqTemplate.GetPositionId());
                  seqAspirationBucket.SetCurrentPosition(1);
                  o_arr_seqAspiration.AddAsLast(seqAspirationBucket);
                  seqAspirationBucket.RemoveAt(1);
                  //i_seqTemplate.Increment(1);
                  fltNumberOfSamplesBucket = o_arr_intNumberOfReactionsPerTube.GetAt(m - 1) + fltNumberOfReactionsBucket;
                  o_arr_intNumberOfReactionsPerTube.SetAt(m - 1, fltNumberOfSamplesBucket);
                  fltActionVolume = fltActionVolume - fltNeededVolumeBucket;
                  if(fltActionVolume == 0) fltActionVolume = i_fltVolumeOfFullTube - i_fltDeadVolumeOfTube;
                  TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "Action volume 2: ", fltActionVolume, "", "", "", "", "", "", "", "");
                }
             else{
                  //Deplete partial tube
                  o_arr_fltVolumeAspiration.AddAsLast(fltActionVolume);
                  o_arr_blnConsecutiveAspiration.AddAsLast(0);
                  seqAspirationBucket.Add(i_seqTemplate.GetLabwareId(), i_seqTemplate.GetPositionId());
                  seqAspirationBucket.SetCurrentPosition(1);
                  o_arr_seqAspiration.AddAsLast(seqAspirationBucket);
                  seqAspirationBucket.RemoveAt(1);
                  i_seqTemplate.Increment(1);
                  fltNumberOfSamplesBucket = Floor(fltActionVolume / i_fltVolumePerSample);
                  fltNumberOfReactionsBucket = fltNumberOfReactionsBucket - fltNumberOfSamplesBucket;
                  fltNumberOfSamplesBucket = o_arr_intNumberOfReactionsPerTube.GetAt(m - 1) + fltNumberOfSamplesBucket;
                  o_arr_intNumberOfReactionsPerTube.SetAt(m - 1, fltNumberOfSamplesBucket);
                  //Consecutive aspiration from new tube
                  fltNeededVolumeBucket = fltNeededVolumeBucket - fltActionVolume;
                  fltActionVolume = i_fltVolumeOfFullTube - i_fltDeadVolumeOfTube;
                  TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "Action volume 3: ", fltActionVolume, "", "", "", "", "", "", "", "");
                  o_arr_fltVolumeAspiration.AddAsLast(fltNeededVolumeBucket);
                  o_arr_blnConsecutiveAspiration.AddAsLast(1);
                  seqAspirationBucket.Add(i_seqTemplate.GetLabwareId(), i_seqTemplate.GetPositionId());
                  seqAspirationBucket.SetCurrentPosition(1);
                  o_arr_seqAspiration.AddAsLast(seqAspirationBucket);
                  seqAspirationBucket.RemoveAt(1);
                  fltNumberOfSamplesBucket = fltNumberOfReactionsBucket;
                  o_arr_intNumberOfReactionsPerTube.AddAsLast(fltNumberOfReactionsBucket);
                  m++;
                  fltActionVolume = fltActionVolume - fltNeededVolumeBucket;
                  TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "Action volume 4: ", fltActionVolume, "", "", "", "", "", "", "", "");
                }
          TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Number of reactions per tube 2: ", o_arr_intNumberOfReactionsPerTube);
           }
        //Reset template sequence
        i_seqTemplate.SetCurrentPosition(intSequencePositionReset);
        //o_arr_fltVolumeAspiration now contains the namesake in [number of source tubes OR number of source tubes +1] elements
        TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Volume of aspiration: ", o_arr_fltVolumeAspiration);
        //o_arr_blnConsecutiveAspiration now contains the namesake in [number of source tubes OR number of source tubes +1] elements
        TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Consecutive aspiration boolean: ", o_arr_blnConsecutiveAspiration);
        //o_arr_intNumberOfReactionsPerTube now contains the namesake in [number of source tubes] elements
        TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Number of reactions per tube: ", o_arr_intNumberOfReactionsPerTube);
        //o_arr_seqAspiration now contains the namesake in [number of source tubes OR number of source tubes +1] elements
        intSize = o_arr_seqAspiration.GetSize();
        for(i = 1; i <= intSize; i++){
          	TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_arr_seqAspiration.GetAt(i - 1));
        	}
        //Calculate the dispense volume array
        for(i = 1;i <= i_intNumberOfIntermediatePlateWells; i++){
          	o_arr_fltVolumeDispense.AddAsLast(o_arr_intNumberOfReactionsPerWell.GetAt(i - 1) * i_fltVolumePerSample * fltDeadVolumeTransfer + i_fltDeadVolumeOfIntermediatePlate);
        	}
        TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Volume of dispense: ", o_arr_fltVolumeDispense);
      }
    }
    {
      variable fltActionVolume, fltNumberOfTips, fltNeededVolumeBucket, fltNumberOfSamplesBucket(0), fltNumberOfReactionsBucket, fltDeadVolumeBucket, fltDeadVolumeTransfer, intSequencePositionReset, i, j(1), k(1), m(1), intSize;
      sequence seqAspirationBucket;
      //Store original sequence position for reset and prepare for input start position
      intSequencePositionReset = i_seqTemplate.GetCurrentPosition();
      i_seqTemplate.SetCurrentPosition(i_intStartPosition);
      //Prepare dead volume variables
      fltDeadVolumeTransfer = 1 + i_fltDeadVolumeOfLiquidTransfer / 100.0;
      fltDeadVolumeBucket = i_fltDeadVolumeOfIntermediatePlate;
      //Calculate the number of tips used
      fltNumberOfTips = i_intNumberOfIntermediatePlateWells;
      if(i_blnCreateMultiDispensePattern == 1 && i_intNumberOfIntermediatePlateWells >= 16) fltNumberOfTips = 8;
      TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "Number of tips: ", fltNumberOfTips, "", "", "", "", "", "", "", "");
      //Calculate the number of reactions per intermediate plate well
      o_arr_intNumberOfReactionsPerWell.SetSize(i_intNumberOfIntermediatePlateWells);
      for(i = 1;i <= i_intNumberOfSamples; i++){
           o_arr_intNumberOfReactionsPerWell.SetAt(j - 1,k);
           if(j < i_intNumberOfIntermediatePlateWells) j++;
           else j = 1;
           if(i % i_intNumberOfIntermediatePlateWells == 0) k++;
         }
      //o_arr_intNumberOfReactionsPerWell now contains the namesake in [i_intNumberOfIntermediatePlateWells] elements
      TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Number of reactions per well: ", o_arr_intNumberOfReactionsPerWell);
      //Determine the current action volume and initiate o_arr_intNumberOfReactionsPerTube and index
      if(i_fltVolumeOfPartialTube == 0){
        	fltActionVolume = i_fltVolumeOfFullTube - i_fltDeadVolumeOfTube;
        	o_arr_intNumberOfReactionsPerTube.AddAsLast(0);
        	o_arr_intNumberOfReactionsPerTube.AddAsLast(0);
           i_seqTemplate.Increment(1);
        	m++;
      	}
      else{
           fltActionVolume = i_fltVolumeOfPartialTube - i_fltDeadVolumeOfTube;
           if(fltActionVolume <= 0){
          	   fltActionVolume = i_fltVolumeOfFullTube - i_fltDeadVolumeOfTube;
          	   o_arr_intNumberOfReactionsPerTube.AddAsLast(0);
          	   o_arr_intNumberOfReactionsPerTube.AddAsLast(0);
                i_seqTemplate.Increment(1);
          	   m++;
        	   }
           else o_arr_intNumberOfReactionsPerTube.AddAsLast(0);
         }
      TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "Action volume 1: ", fltActionVolume, "", "", "", "", "", "", "", "");
      TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Number of reactions per tube 1: ", o_arr_intNumberOfReactionsPerTube);
      //Determine the aspiration volume and consecutive boolean arrays, with respect to depletion of the partial tube.  Generate o_arr_seqAspiration...1:1 with o_arr_blnConsecutiveAspiration
      for(i = 1;i <= fltNumberOfTips; i++){
           //Determine the number of reactions per aspiration
           fltNumberOfReactionsBucket = o_arr_intNumberOfReactionsPerWell.GetAt(i - 1);
           if(i_blnCreateMultiDispensePattern == 1 && i_intNumberOfIntermediatePlateWells >= 16){
                fltNumberOfReactionsBucket = fltNumberOfReactionsBucket + o_arr_intNumberOfReactionsPerWell.GetAt(i + 7);
                fltDeadVolumeBucket = i_fltDeadVolumeOfIntermediatePlate * 2;
              }
           if(i_blnCreateMultiDispensePattern == 1 && i_intNumberOfIntermediatePlateWells >= 24){
                fltNumberOfReactionsBucket = fltNumberOfReactionsBucket + o_arr_intNumberOfReactionsPerWell.GetAt(i + 15);
                fltDeadVolumeBucket = i_fltDeadVolumeOfIntermediatePlate * 3;
              }
           TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "Number of reactions bucket: ", fltNumberOfReactionsBucket, "", "", "", "", "", "", "", "");
           //Determine the volume per aspiration
           fltNeededVolumeBucket = fltNumberOfReactionsBucket * i_fltVolumePerSample * fltDeadVolumeTransfer + fltDeadVolumeBucket;
           TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "Volume needed bucket: ", fltNeededVolumeBucket, "", "", "", "", "", "", "", "");
           if(fltNeededVolumeBucket <= fltActionVolume){
                //Aspirate from current tube...partial or new
                o_arr_fltVolumeAspiration.AddAsLast(fltNeededVolumeBucket);
                o_arr_blnConsecutiveAspiration.AddAsLast(0);
                seqAspirationBucket.Add(i_seqTemplate.GetLabwareId(), i_seqTemplate.GetPositionId());
                seqAspirationBucket.SetCurrentPosition(1);
                o_arr_seqAspiration.AddAsLast(seqAspirationBucket);
                seqAspirationBucket.RemoveAt(1);
                //i_seqTemplate.Increment(1);
                fltNumberOfSamplesBucket = o_arr_intNumberOfReactionsPerTube.GetAt(m - 1) + fltNumberOfReactionsBucket;
                o_arr_intNumberOfReactionsPerTube.SetAt(m - 1, fltNumberOfSamplesBucket);
                fltActionVolume = fltActionVolume - fltNeededVolumeBucket;
                if(fltActionVolume == 0) fltActionVolume = i_fltVolumeOfFullTube - i_fltDeadVolumeOfTube;
                TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "Action volume 2: ", fltActionVolume, "", "", "", "", "", "", "", "");
              }
           else{
                //Deplete partial tube
                o_arr_fltVolumeAspiration.AddAsLast(fltActionVolume);
                o_arr_blnConsecutiveAspiration.AddAsLast(0);
                seqAspirationBucket.Add(i_seqTemplate.GetLabwareId(), i_seqTemplate.GetPositionId());
                seqAspirationBucket.SetCurrentPosition(1);
                o_arr_seqAspiration.AddAsLast(seqAspirationBucket);
                seqAspirationBucket.RemoveAt(1);
                i_seqTemplate.Increment(1);
                fltNumberOfSamplesBucket = Floor(fltActionVolume / i_fltVolumePerSample);
                fltNumberOfReactionsBucket = fltNumberOfReactionsBucket - fltNumberOfSamplesBucket;
                fltNumberOfSamplesBucket = o_arr_intNumberOfReactionsPerTube.GetAt(m - 1) + fltNumberOfSamplesBucket;
                o_arr_intNumberOfReactionsPerTube.SetAt(m - 1, fltNumberOfSamplesBucket);
                //Consecutive aspiration from new tube
                fltNeededVolumeBucket = fltNeededVolumeBucket - fltActionVolume;
                fltActionVolume = i_fltVolumeOfFullTube - i_fltDeadVolumeOfTube;
                TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "Action volume 3: ", fltActionVolume, "", "", "", "", "", "", "", "");
                o_arr_fltVolumeAspiration.AddAsLast(fltNeededVolumeBucket);
                o_arr_blnConsecutiveAspiration.AddAsLast(1);
                seqAspirationBucket.Add(i_seqTemplate.GetLabwareId(), i_seqTemplate.GetPositionId());
                seqAspirationBucket.SetCurrentPosition(1);
                o_arr_seqAspiration.AddAsLast(seqAspirationBucket);
                seqAspirationBucket.RemoveAt(1);
                fltNumberOfSamplesBucket = fltNumberOfReactionsBucket;
                o_arr_intNumberOfReactionsPerTube.AddAsLast(fltNumberOfReactionsBucket);
                m++;
                fltActionVolume = fltActionVolume - fltNeededVolumeBucket;
                TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "Action volume 4: ", fltActionVolume, "", "", "", "", "", "", "", "");
              }
        TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Number of reactions per tube 2: ", o_arr_intNumberOfReactionsPerTube);
         }
      //Reset template sequence
      i_seqTemplate.SetCurrentPosition(intSequencePositionReset);
      //o_arr_seqAspiration now contains the namesake in [number of source tubes OR number of source tubes +1] elements
      intSize = o_arr_seqAspiration.GetSize();
      for(i = 1; i <= intSize; i++){
        	TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_arr_seqAspiration.GetAt(i - 1));
      	}
      //o_arr_fltVolumeAspiration now contains the namesake in [number of source tubes OR number of source tubes +1] elements
      TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Volume of aspiration: ", o_arr_fltVolumeAspiration);
      //Calculate the dispense volume array
      for(i = 1;i <= i_intNumberOfIntermediatePlateWells; i++){
        	o_arr_fltVolumeDispense.AddAsLast(o_arr_intNumberOfReactionsPerWell.GetAt(i - 1) * i_fltVolumePerSample * fltDeadVolumeTransfer + i_fltDeadVolumeOfIntermediatePlate);
      	}
      //o_arr_fltVolumeDispense now contains the namesake in [number of wells] elements
      TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Volume of dispense: ", o_arr_fltVolumeDispense);
      //o_arr_blnConsecutiveAspiration now contains the namesake in [number of source tubes OR number of source tubes +1] elements
      TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Consecutive aspiration boolean: ", o_arr_blnConsecutiveAspiration);
      //o_arr_intNumberOfReactionsPerTube now contains the namesake in [number of source tubes] elements
      TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Number of reactions per tube: ", o_arr_intNumberOfReactionsPerTube);
      //o_arr_intNumberOfReactionsPerWell now contains the namesake in [number of wells] elements
      TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Number of reactions per well: ", o_arr_intNumberOfReactionsPerWell);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
  }

  private function _VersionHistory(  ) void {
  }

  function ReagentPlateCreation_SpecifyNumberOfSourceTubes( variable i_intNumberOfSamples, variable i_intNumberOfIntermediatePlateWells, variable i_intNumberOfTubes, variable i_fltVolumePerSample, variable i_fltDeadVolumeOfTube, variable i_fltDeadVolumeOfIntermediatePlate, variable i_fltDeadVolumeOfLiquidTransfer, sequence & i_seqTemplate, variable i_intStartPosition, variable i_blnCreateMultiDispensePattern, sequence & o_seqAspiration, variable & o_arr_fltVolumeAspiration[], variable & o_arr_fltVolumeDispense[], variable & o_arr_fltVolumePerTube[], variable & o_arr_intNumberOfReactionsPerTube[], variable & o_arr_intNumberOfReactionsPerWell[] ) void {
    private variable l_strComment;
    o_arr_fltVolumeAspiration.SetSize( 0);
    o_arr_fltVolumeDispense.SetSize( 0);
    o_arr_fltVolumePerTube.SetSize( 0);
    o_arr_intNumberOfReactionsPerTube.SetSize( 0);
    o_arr_intNumberOfReactionsPerWell.SetSize( 0);
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    {
      variable fltNumberOfTips, fltNeededVolumeBucket, fltNumberOfReactionsBucket, fltDeadVolumeBucket, fltDeadVolumeTransfer, intSequencePositionReset, i, j(1), k(1);
      //Store original sequence position for reset and prepare for input start position
      intSequencePositionReset = i_seqTemplate.GetCurrentPosition();
      i_seqTemplate.SetCurrentPosition(i_intStartPosition);
      //Prepare dead volume variables
      fltDeadVolumeTransfer = 1 + i_fltDeadVolumeOfLiquidTransfer / 100.0;
      fltDeadVolumeBucket = i_fltDeadVolumeOfIntermediatePlate;
      //Calculate the number of tips used
      fltNumberOfTips = i_intNumberOfIntermediatePlateWells;
      if(i_blnCreateMultiDispensePattern == 1 && i_intNumberOfIntermediatePlateWells >= 16) fltNumberOfTips = 8;
      TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "Number of tips: ", fltNumberOfTips, "", "", "", "", "", "", "", "");
      //Calculate the number of reactions per intermediate plate well
      o_arr_intNumberOfReactionsPerWell.SetSize(i_intNumberOfIntermediatePlateWells);
      for(i = 1;i <= i_intNumberOfSamples; i++){
           o_arr_intNumberOfReactionsPerWell.SetAt(j - 1,k);
           if(j < i_intNumberOfIntermediatePlateWells) j++;
           else j = 1;
           if(i % i_intNumberOfIntermediatePlateWells == 0) k++;
         }
      i_fltDeadVolumeOfLiquidTransfer = 1 + (i_fltDeadVolumeOfLiquidTransfer / 100);
      //Calculate the number of reactions per tube
      j = 1;
      k = 1;
      o_arr_intNumberOfReactionsPerTube.SetSize(i_intNumberOfTubes);
      for(i = 1;i <= i_intNumberOfSamples; i++){
           o_arr_intNumberOfReactionsPerTube.SetAt(j - 1,k);
           if(j < i_intNumberOfTubes) j++;
           else j = 1;
           if(i % i_intNumberOfTubes == 0) k++;
         }
      //!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!
      o_arr_fltVolumePerTube.SetSize(i_intNumberOfTubes);
      //pre-load o_arr_fltVolumePerTube with dead volume
      for(i = 1; i <= i_intNumberOfTubes; i++){
           o_arr_fltVolumePerTube.SetAt(i - 1, i_fltDeadVolumeOfTube);
         }
      j = 1;
      //Determine the aspiration volume array and sequence
      for(i = 1;i <= fltNumberOfTips; i++){
           //Determine the number of reactions per aspiration
           fltNumberOfReactionsBucket = o_arr_intNumberOfReactionsPerWell.GetAt(i - 1);
           if(i_blnCreateMultiDispensePattern == 1 && i_intNumberOfIntermediatePlateWells >= 16){
                fltNumberOfReactionsBucket = fltNumberOfReactionsBucket + o_arr_intNumberOfReactionsPerWell.GetAt(i + 7);
                fltDeadVolumeBucket = i_fltDeadVolumeOfIntermediatePlate * 2;
              }
           if(i_blnCreateMultiDispensePattern == 1 && i_intNumberOfIntermediatePlateWells >= 24){
                fltNumberOfReactionsBucket = fltNumberOfReactionsBucket + o_arr_intNumberOfReactionsPerWell.GetAt(i + 15);
                fltDeadVolumeBucket = i_fltDeadVolumeOfIntermediatePlate * 3;
              }
           TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "Number of reactions bucket: ", fltNumberOfReactionsBucket, "", "", "", "", "", "", "", "");
           //Determine the volume per aspiration
           fltNeededVolumeBucket = fltNumberOfReactionsBucket * i_fltVolumePerSample * fltDeadVolumeTransfer + fltDeadVolumeBucket;
           TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, "Volume needed bucket: ", fltNeededVolumeBucket, "", "", "", "", "", "", "", "");
           o_arr_fltVolumeAspiration.AddAsLast(fltNeededVolumeBucket);
           o_arr_fltVolumePerTube.SetAt(j - 1, o_arr_fltVolumePerTube.GetAt(j - 1) + fltNeededVolumeBucket);
           j++;
           o_seqAspiration.Add(i_seqTemplate.GetLabwareId(), i_seqTemplate.GetPositionId());
           i_seqTemplate.Increment(1);
           if(j > i_intNumberOfTubes){
                j = 1;
                i_seqTemplate.SetCurrentPosition(i_intStartPosition);
              }
         }
      //!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!
      //Reset template sequence
      i_seqTemplate.SetCurrentPosition(intSequencePositionReset);
      //Set position of output sequence to 1
      o_seqAspiration.SetCurrentPosition(1);
      TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seqAspiration);
      //o_arr_fltVolumeAspiration now contains the namesake in [number of source tubes] elements
      TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Volume of aspiration: ", o_arr_fltVolumeAspiration);
      //Calculate the dispense volume array
      for(i = 1;i <= i_intNumberOfIntermediatePlateWells; i++){
        	o_arr_fltVolumeDispense.AddAsLast(o_arr_intNumberOfReactionsPerWell.GetAt(i - 1) * i_fltVolumePerSample * fltDeadVolumeTransfer + i_fltDeadVolumeOfIntermediatePlate);
      	}
      //o_arr_fltVolumeDispense now contains the namesake in [number of wells] elements
      TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Volume of dispense: ", o_arr_fltVolumeDispense);
      //o_arr_fltVolumePerTube now contains the namesake in [number of source tubes] elements
      TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Volume per tube: ", o_arr_fltVolumePerTube);
      //o_arr_intNumberOfReactionsPerTube now contains the namesake in [number of source tubes] elements
      TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Number of reactions per tube: ", o_arr_intNumberOfReactionsPerTube);
      //o_arr_intNumberOfReactionsPerWell now contains the namesake in [number of wells] elements
      TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, "Number of reactions per well: ", o_arr_intNumberOfReactionsPerWell);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
  }

  function ReagentPlateLoadInformation_WithPartialSourceTubes( variable i_strReagentName, variable i_fltPartialTubeVolume, variable i_fltPartialTubeDeadVolume, variable i_strTubeType, variable i_intStartPosition, variable i_intNumberOfTubes, variable & o_arr_strReagentName[], variable & o_arr_strVolume[], variable & o_arr_strTubeType[] ) void {
    private variable l_strVolume;
    private variable l_strReagentName;
    private variable loopCounter1;
    private variable l_intSize;
    private variable l_strComment;
    o_arr_strReagentName.SetSize( 0);
    o_arr_strVolume.SetSize( 0);
    o_arr_strTubeType.SetSize( 0);
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    o_arr_strReagentName.SetSize(0);
    o_arr_strVolume.SetSize(0);
    o_arr_strTubeType.SetSize(0);
    l_strReagentName = Translate("");
    if (i_fltPartialTubeVolume == 0)
    {
      l_strReagentName = "Position " + StrIStr(i_intStartPosition) + ": " + i_strReagentName + "-Partial Tube (zero volume - do not load)";
      i_intStartPosition++;
    }
    else
    {
      if (i_fltPartialTubeVolume <= i_fltPartialTubeDeadVolume)
      {
        l_strReagentName = "Position " + StrIStr(i_intStartPosition) + ": " + i_strReagentName + "-Partial Tube (insufficient volume to process)";
        i_intStartPosition++;
      }
      else
      {
        l_strReagentName = "Position " + StrIStr(i_intStartPosition) + ": " + i_strReagentName + "-Partial Tube";
        i_intStartPosition++;
      }
    }
    o_arr_strReagentName.AddAsLast(l_strReagentName);
    l_strVolume = Translate("");
    {
      variable intLength;
      intLength = StrFind(StrFStr(i_fltPartialTubeVolume * 1.0), ".") + 2;
      l_strVolume = StrLeft(StrFStr(i_fltPartialTubeVolume * 1.0), intLength) + " µL";
    }
    o_arr_strVolume.AddAsLast(l_strVolume);
    o_arr_strTubeType.AddAsLast(i_strTubeType);
    l_intSize = i_intNumberOfTubes - 1;
    {
      for(loopCounter1 = 0; loopCounter1 < l_intSize;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_strReagentName = "Position " + StrIStr(i_intStartPosition) + ": " + i_strReagentName;
        i_intStartPosition++;
        o_arr_strReagentName.AddAsLast(l_strReagentName);
        o_arr_strVolume.AddAsLast(Translate("Full Tube"));
        o_arr_strTubeType.AddAsLast(i_strTubeType);
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Reagent Name and Position: "), o_arr_strReagentName);
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Volume: "), o_arr_strVolume);
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Tube Type: "), o_arr_strTubeType);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
  }

  function ReagentPlateLoadInformation_SpecifyNumberOfSourceTubes( variable i_strReagentName, variable i_strTubeType, variable i_intStartPosition, variable & i_arr_fltVolumes[], variable & o_arr_strReagentName[], variable & o_arr_strVolume[], variable & o_arr_strTubeType[] ) void {
    private variable l_strVolume;
    private variable l_strReagentName;
    private variable l_intPosition;
    private variable loopCounter1;
    private variable l_intSize;
    private variable l_strComment;
    o_arr_strReagentName.SetSize( 0);
    o_arr_strVolume.SetSize( 0);
    o_arr_strTubeType.SetSize( 0);
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    o_arr_strReagentName.SetSize(0);
    o_arr_strVolume.SetSize(0);
    o_arr_strTubeType.SetSize(0);
    l_strReagentName = Translate("");
    l_strVolume = Translate("");
    l_intSize=i_arr_fltVolumes.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < l_intSize;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_strReagentName = "Position " + StrIStr(i_intStartPosition) + ": " + i_strReagentName;
        i_intStartPosition++;
        o_arr_strReagentName.AddAsLast(l_strReagentName);
        l_strVolume = StrFStr(i_arr_fltVolumes.ElementAt( loopCounter1 -1));
        l_intPosition = StrFind(l_strVolume, Translate("."));
        if (l_intPosition != -1)
        {
          l_intPosition = l_intPosition + 2;
          l_strVolume = StrLeft(l_strVolume, l_intPosition);
        }
        o_arr_strVolume.AddAsLast(l_strVolume);
        o_arr_strTubeType.AddAsLast(i_strTubeType);
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Reagent Name and Position: "), o_arr_strReagentName);
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Volume: "), o_arr_strVolume);
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Tube Type: "), o_arr_strTubeType);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
  }

  private function _FormatSequenceForSize( device & i_instrument, sequence & i_seqTemplate, variable i_intStartPoint, variable i_intSize, sequence & o_seqFormattedForSize ) void {
    private variable l_intCurrentPosition;
    private sequence i_seqTemplateAspirate;
    private variable l_strPositionID;
    private variable loopCounter3;
    private variable l_strLabwareID;
    private variable l_intNext;
    { sequence __temp; o_seqFormattedForSize = __temp; }
    l_intCurrentPosition = i_seqTemplate.GetCurrentPosition();
    i_seqTemplate.SetCurrentPosition(i_intStartPoint);
    {
      for(loopCounter3 = 0; loopCounter3 < i_intSize;)
      {
        loopCounter3 = loopCounter3 + 1;
        l_strLabwareID = SeqGetLabwareId(i_seqTemplate);
        l_strPositionID = SeqGetPositionId(i_seqTemplate);
        SeqAdd(o_seqFormattedForSize, l_strLabwareID, l_strPositionID);
        SeqIncrement(i_seqTemplateAspirate, 1);
        l_intNext = SeqGetNext(i_seqTemplate);
        if (l_intNext == 0)
        {
          i_seqTemplate.SetCurrentPosition(i_intStartPoint);
        }
      }
    }
    i_seqTemplate.SetCurrentPosition(l_intCurrentPosition);
    o_seqFormattedForSize.SetCurrentPosition(1);
  }
} // library namespace
