#pragma once
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLUtilLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "HSLTimLib.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "VirtualLabware_V2\\VirtualLabware_V2.hsl"
#include "HSLDevLib.hsl"
#include "InstrumentTypeHelper.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace TRANSPORT_CONTROLLER {
  variable t_intTraceLevel;
  variable t_blnSimulationModeON;
  variable t_strTransportChannelpattern;
  variable t_intFrontChannelQCGTransport;
  variable t_intNumberOfAllAvailableChannels;
  variable t_strFullPathReportFile;
  sequence t_seqQCGGripper;
  variable t_strTool;
  variable t_strToolArm;
  variable t_intPlatformType;
  variable t_strLibraryName;
  variable t_strFunctionName;
  variable t_strLeftLimitXCoordinateToStrechGripperArm;
  function Init( sequence & i_seqGripper, variable i_strFullPathReportFile, device & ML_STAR, variable & o_strNameAndVersion ) variable ;
  function Trp_Lid( device & ML_STAR, sequence & i_seqLIDStartingPosition, sequence & i_seqLIDDestination, variable i_blnParkTransportToolAfterMove, variable i_intGripMode, variable i_intTransportTool ) variable ;
  function Trp_MIDI( device & ML_STAR, sequence & i_seqMIDIStartingPosition, sequence & i_seqMIDIDestinationPosition, variable i_blnParkTransportToolAfterMove, variable i_intGripMode, variable i_intTransportTool ) variable ;
  function Trp_PCR( device & ML_STAR, sequence & i_seqPCRStartingPosition, sequence & i_seqPCRDestinationPosition, variable i_blnParkTransportToolAfterMove, variable i_intGripMode, variable i_intTransportTool ) variable ;
  function Trp_PCRAndScanBarcode( device & ML_STAR, sequence & i_seqPCRStartingPosition, sequence & i_seqPCRDestinationPosition, variable i_blnParkTransportToolAfterMove, variable i_intGripMode, variable i_intTransportTool, variable i_intTrackNumberReadBarcode ) variable ;
  private function _CheckSytemConnected( device & ML_STAR ) void ;
  private function _DATA_AnalyzeStepReturnValueOfTransportStepAndWriteToReport( variable i_strStepReturnValueGetPlate, variable i_strStepReturnValuePlacePlate, variable i_intTransportTool, variable i_strReadCurrentBarcode ) variable ;
  private function _DATA_TranslateChannelErrorCodes( variable i_intChannelPerformedTransportOrPipetteStep, variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedPipettingInformaton ) void ;
  private function _DATA_TranslateIPGErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedTransportInformaton ) void ;
  private function _DATA_TranslateVectorCustomDialogsErrorCodes( variable i_intBindReturnValue ) void ;
  private function _DATA_UpdateInformationIntoReportFile( variable i_strInformationToUpdateReportList, variable i_blnUpdateInformationToStatusWindow ) variable ;
  private function _Version(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function Init( sequence & i_seqGripper, variable i_strFullPathReportFile, device & ML_STAR, variable & o_strNameAndVersion ) variable {
    private variable l_intReturnValue;
    private variable l_strCurrentTime;
    private variable l_strCurrentDate;
    private variable l_strTransferVolume;
    private variable l_strPosIDTarget;
    private variable l_strTranslatedPipettingInformationDispense;
    private variable l_strTranslatedPipettingInformationAspiration;
    private variable l_strLabIDSource;
    private variable l_strTranslatedTransportInformation;
    private variable l_strPosIDSource;
    private variable l_strLabIDTarget;
    private variable l_strBarcodeInformation;
    private file l_hdlARWReportFile;
    private variable l_strGetTypeOfVariable;
    private variable l_strLabwareID;
    private variable l_strDescription;
    private variable l_str_ReturnNameAndVersion;
    private variable l_strControllerVersion;
    private variable l_strComment;
    private variable t_strLibraryNameWithoutExtension;
    o_strNameAndVersion = 0;
    t_intTraceLevel = 0;
    t_intTraceLevel = TRACELEVEL::GetTraceLevel();
    t_strLibraryName = Translate("");
    t_strFunctionName = Translate("");
    l_strControllerVersion = Translate("");
    l_str_ReturnNameAndVersion = Translate("");
    t_strFunctionName = GetFunctionName();
    t_strLibraryName = GetFileName();
    l_strControllerVersion = "0.4.12";
    t_strLibraryNameWithoutExtension = HSLExtensions::File::GetFileNameWithoutExtension(t_strLibraryName);
    o_strNameAndVersion = StrConcat4(t_strLibraryNameWithoutExtension, Translate(" "), l_strControllerVersion, Translate(""));
    l_strDescription = o_strNameAndVersion;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strDescription);
    t_blnSimulationModeON = Util::GetSimulationMode();
    l_strGetTypeOfVariable = StrGetType(i_strFullPathReportFile);
    if (l_strGetTypeOfVariable == "i")
    {
      i_strFullPathReportFile = StrIStr(i_strFullPathReportFile);
    }
    _CheckSytemConnected(ML_STAR);
    if (t_intPlatformType == 1)
    {
      t_strLeftLimitXCoordinateToStrechGripperArm = 80;
    }
    l_strLabwareID = SeqGetLabwareId(i_seqGripper);
    t_strTransportChannelpattern = Translate("");
    t_intNumberOfAllAvailableChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    if (t_intPlatformType == 0)
    {
      StrFillLeft(t_strTransportChannelpattern, Translate("1"), 2);
      StrFillRight(t_strTransportChannelpattern, Translate("0"), t_intNumberOfAllAvailableChannels);
      StrLeft(t_strTransportChannelpattern, t_intNumberOfAllAvailableChannels);
      t_strTool = Translate("CORE Gripper");
      t_strToolArm = Translate("iSWAP");
    }
    else
    {
      StrFillLeft(t_strTransportChannelpattern, Translate("1"), 4);
      StrFillRight(t_strTransportChannelpattern, Translate("0"), t_intNumberOfAllAvailableChannels);
      StrLeft(t_strTransportChannelpattern, t_intNumberOfAllAvailableChannels);
      t_strTool = Translate("QUAD CORE Gripper");
      t_strToolArm = Translate("IPG");
    }
    t_intFrontChannelQCGTransport = t_intNumberOfAllAvailableChannels;
    SeqRemoveAll(t_seqQCGGripper);
    SeqCopySequence(t_seqQCGGripper, i_seqGripper);
    if (i_strFullPathReportFile == "")
    {
      l_strCurrentDate = TimGetFormattedDate(Translate("%Y%m%d"));
      l_strCurrentTime = TimGetFormattedTime(Translate("%H%M%S"));
      t_strFullPathReportFile = StrConcat12(Translate("C:\\Program Files (x86)\\HAMILTON\\LogFiles\\"), l_strCurrentDate, Translate("_"), l_strCurrentTime, Translate("_"), Translate("Transport_Controller_Report"), Translate(""), Translate(""), Translate(".xls"), Translate(""), Translate(""), Translate(""));
      onerror goto errLabel_1 ;
      err.Clear();
      l_hdlARWReportFile.SetExtendedProperties( "HDR=NO");
      l_hdlARWReportFile.AddField("Date", l_strCurrentDate, hslString, 255);
      l_hdlARWReportFile.AddField("Time", l_strCurrentTime, hslString, 255);
      l_hdlARWReportFile.AddField("LabID Source", l_strLabIDSource, hslString, 255);
      l_hdlARWReportFile.AddField("PosID Source", l_strPosIDSource, hslString, 255);
      l_hdlARWReportFile.AddField("Transfer Volume", l_strTransferVolume, hslString, 255);
      l_hdlARWReportFile.AddField("LabID Target", l_strLabIDTarget, hslString, 255);
      l_hdlARWReportFile.AddField("PosID Target", l_strPosIDTarget, hslString, 255);
      l_hdlARWReportFile.AddField("Barcode", l_strBarcodeInformation, hslString, 255);
      l_hdlARWReportFile.AddField("Transport information", l_strTranslatedTransportInformation, hslString, 255);
      l_hdlARWReportFile.AddField("Aspiration information", l_strTranslatedPipettingInformationAspiration, hslString, 255);
      l_hdlARWReportFile.AddField("Dispense information", l_strTranslatedPipettingInformationDispense, hslString, 255);
      if( 0 == l_hdlARWReportFile.Open(t_strFullPathReportFile + " " + "RuntimeReport", hslWrite) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
      }
      errLabel_1 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        VectorCustomDialogs::MessageDialog(Translate("File handling warning"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("No data could be written or updated into the selected reprot file."));
      }   /* end if from skip handler if no error */
      if( 0 != l_hdlARWReportFile.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      l_hdlARWReportFile.RemoveFields();
    }
    else
    {
      t_strFullPathReportFile = i_strFullPathReportFile;
    }
    onerror goto errLabel_2 ;
    err.Clear();
    l_intReturnValue = VectorCustomDialogs::Initialize();
    _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValue);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Return value of init vectort custom dialogs : "), l_intReturnValue);
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _Version(  ) void {
  }

  private function _DATA_UpdateInformationIntoReportFile( variable i_strInformationToUpdateReportList, variable i_blnUpdateInformationToStatusWindow ) variable {
    private variable l_strEmptyString;
    private file l_hdlARWReportFile;
    private variable l_intBindReturnValue;
    private variable l_strComment;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strEmptyString = Translate("");
    onerror goto errLabel_3 ;
    err.Clear();
    l_hdlARWReportFile.AddField("Date", i_strInformationToUpdateReportList, hslString, 255);
    l_hdlARWReportFile.AddField("Time", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("LabID Source", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("PosID Source", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("Transfer Volume", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("LabID Target", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("PosID Target", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("Barcode", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("Transport information", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("Aspiration information", l_strEmptyString, hslString, 255);
    l_hdlARWReportFile.AddField("Dispense information", l_strEmptyString, hslString, 255);
    if( 0 == l_hdlARWReportFile.Open(t_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
    }
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      VectorCustomDialogs::MessageDialog(Translate("File handling warning"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("No data could be written or updated into the selected reprot file."));
    }   /* end if from skip handler if no error */
    if( 0 == l_hdlARWReportFile.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != l_hdlARWReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlARWReportFile.RemoveFields();
    if (i_blnUpdateInformationToStatusWindow == ASWGLOBAL::BOOL::TRUE)
    {
      onerror goto errLabel_4 ;
      err.Clear();
      l_intBindReturnValue = VectorCustomDialogs::AppendStatusText(i_strInformationToUpdateReportList);
      _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
      errLabel_4 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        l_intBindReturnValue = VectorCustomDialogs::Initialize();
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
        l_intBindReturnValue = VectorCustomDialogs::ShowStatusDialog(Translate("Transport_Controller"));
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
        l_intBindReturnValue = VectorCustomDialogs::AppendStatusText(i_strInformationToUpdateReportList);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intBindReturnValue);
      }   /* end if from skip handler if no error */
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Trp_PCR( device & ML_STAR, sequence & i_seqPCRStartingPosition, sequence & i_seqPCRDestinationPosition, variable i_blnParkTransportToolAfterMove, variable i_intGripMode, variable i_intTransportTool ) variable {
    private variable l_strTransportTool;
    private variable l_intGripMode;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strStepReturnValueQCGGetPlate;
    private variable o_strReadCurrentBarcode;
    private variable l_fltDistanceinMMPressPlateDuringPlacePlateCommand;
    private variable l_intInverseGripValue;
    private variable l_blnPlateCheck;
    private variable l_strReturn;
    private variable l_blnManualTransportRequested;
    private variable l_strLabwareIDSource;
    private variable l_intReturnValueDialog;
    private variable l_strStepReturnValueQCGPlacePlate;
    private variable l_intGripOpeningBeforeAccess;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strLabwareIDDestination;
    private variable l_intGripWidth;
    private variable l_intGripperOpeningWidthBeforeAccess;
    private variable l_strComment;
    private variable l_intReturnSearchForWaste;
    private sequence l_seqPCRStartingPosition;
    private variable l_fltAngleTargetSequence;
    private variable l_fltYCoordinateTargetSequence;
    private variable l_fltZCoordinateTargetSequence;
    private variable l_fltXCoordinateTargetSequence;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqPCRStartingPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqPCRDestinationPosition);
    if (i_intTransportTool == 2)
    {
      l_intReturnSearchForWaste = StrFind(l_strLabwareIDOfTargetSequence, Translate("Waste"));
      if (l_intReturnSearchForWaste >= 0)
      {
        VIRTUALLABWARE_V2::MoveCloneSeq(ML_STAR, i_seqPCRStartingPosition, l_seqPCRStartingPosition, 0, 0, 0);
      }
      else
      {
        SeqCopySequence(l_seqPCRStartingPosition, i_seqPCRStartingPosition);
      }
    }
    if (i_intTransportTool == 1)
    {
      l_strTransportTool = t_strToolArm;
    }
    else
    {
      if (i_intTransportTool == 2)
      {
        l_strTransportTool = t_strTool;
      }
      else
      {
        l_strTransportTool = Translate("undefined tool - check definition");
      }
    }
    l_strInformationToBeUpdated = Translate("");
    l_strInformationToBeUpdated = StrConcat8(Translate("Transport PCR plate "), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Tool used : "), l_strTransportTool, Translate("."));
    _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (i_intTransportTool == 1)
    {
      if (i_intGripMode == 1)
      {
        MECC::TraceComment(Translate("Grip the plate from large site (front from USER point of view) activated"));
        l_intGripMode = 1;
        l_intGripWidth = 124.5;
        l_intGripOpeningBeforeAccess = 130;
        l_intInverseGripValue = 0;
      }
      if (i_intGripMode == 2)
      {
        MECC::TraceComment(Translate("Grip the plate from small site (right from USER point of view)  activated"));
        l_intGripMode = 0;
        l_intGripWidth = 82.5;
        l_intGripOpeningBeforeAccess = 85.5;
        l_intInverseGripValue = 0;
      }
      if (i_intGripMode == 3)
      {
        MECC::TraceComment(Translate("Grip the plate from large site (back from USER point of view) activated"));
        l_intGripMode = 1;
        l_intGripWidth = 124.5;
        l_intGripOpeningBeforeAccess = 130;
        l_intInverseGripValue = 1;
      }
      if (i_intGripMode == 4)
      {
        MECC::TraceComment(Translate("Grip the plate from small site (left from USER point of view)  activated"));
        l_intGripMode = 0;
        l_intGripWidth = 82.5;
        l_intGripOpeningBeforeAccess = 85.5;
        l_intInverseGripValue = 1;
      }
      onerror goto errLabel_5 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        	l_strStepReturnValueQCGGetPlate = arrRetValues[2];
      }
      l_blnManualTransportRequested = ASWGLOBAL::BOOL::FALSE;
      errLabel_5 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        l_strLabwareIDSource = SeqGetLabwareId(i_seqPCRStartingPosition);
        l_strLabwareIDDestination = SeqGetLabwareId(i_seqPCRDestinationPosition);
        l_strReturn = StrConcat4(Translate(" Please pickup the PCR plate from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
        l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Gripper had difficulties picking up the plate."), l_strReturn);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
        if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
        {
          l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
          abort;
        }
      }   /* end if from skip handler if no error */
      if (l_blnManualTransportRequested == ASWGLOBAL::BOOL::FALSE)
      {
        DevGetLabwarePosition(ML_STAR, l_strLabwareIDOfTargetSequence, l_fltXCoordinateTargetSequence, l_fltYCoordinateTargetSequence, l_fltZCoordinateTargetSequence, l_fltAngleTargetSequence);
        onerror goto errLabel_6 ;
        err.Clear();
        if (t_intPlatformType == 1)
        {
          if (l_fltXCoordinateTargetSequence < t_strLeftLimitXCoordinateToStrechGripperArm)
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
              	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
            }
          }
          else
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
              	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
            }
          }
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
            	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
          }
        }
        errLabel_6 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          l_strLabwareIDSource = SeqGetLabwareId(i_seqPCRStartingPosition);
          l_strLabwareIDDestination = SeqGetLabwareId(i_seqPCRDestinationPosition);
          l_strReturn = StrConcat4(Translate(" Please pickup the PCR plate from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
          l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Gripper had difficulties picking up the plate. "), l_strReturn);
          _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
          if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
          {
            l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
          }
          else
          {
            MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
            _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
            abort;
          }
        }   /* end if from skip handler if no error */
      }
      if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
      {
        MECC::TraceComment(Translate("USER confirmed to transport the plate manually"));
        l_strReturn = StrConcat2(Translate(" Press OK to confirm the proper execution of manual transport step. Press CANCEL to abort the run."), Translate(""));
        l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Gripper had difficulties picking up the plate. "), l_strReturn);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
        if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
        {
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually."), ASWGLOBAL::BOOL::TRUE);
        }
        else
        {
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
          abort;
        }
      }
      if (i_blnParkTransportToolAfterMove == 1)
      {
        ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
    }
    if (i_intTransportTool == 2)
    {
      l_intGripWidth = 80;
      l_intGripperOpeningWidthBeforeAccess = 86;
      MECC::TraceComment(Translate("Using QCG grippers for HSP movements"));
      onerror goto errLabel_7 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        	l_strStepReturnValueQCGGetPlate = arrRetValues[2];
      }
      errLabel_7 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        l_strLabwareIDSource = SeqGetLabwareId(i_seqPCRStartingPosition);
        l_strLabwareIDDestination = SeqGetLabwareId(i_seqPCRDestinationPosition);
        l_strReturn = StrConcat4(Translate(" Please pickup the plate from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
        l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Paddles had difficulties picking up the plate."), l_strReturn);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
        if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
        {
          l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
          abort;
        }
      }   /* end if from skip handler if no error */
      l_fltDistanceinMMPressPlateDuringPlacePlateCommand = 1;
      l_blnPlateCheck = 0;
      if (l_blnManualTransportRequested == ASWGLOBAL::BOOL::FALSE)
      {
        if (i_blnParkTransportToolAfterMove == 1)
        {
          onerror goto errLabel_8 ;
          err.Clear();
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
          }
          errLabel_8 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
              	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
            }
            l_strLabwareIDSource = SeqGetLabwareId(i_seqPCRStartingPosition);
            l_strLabwareIDDestination = SeqGetLabwareId(i_seqPCRDestinationPosition);
            l_strReturn = StrConcat4(Translate(" Please pickup the plate from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
            l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Paddles had difficulties picking up the plate. "), l_strReturn);
            _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
            if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
            {
              l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
            }
            else
            {
              MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
              _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
              abort;
            }
          }   /* end if from skip handler if no error */
        }
        else
        {
          onerror goto errLabel_9 ;
          err.Clear();
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
          }
          errLabel_9 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
              	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
            }
            l_strLabwareIDSource = SeqGetLabwareId(i_seqPCRStartingPosition);
            l_strLabwareIDDestination = SeqGetLabwareId(i_seqPCRDestinationPosition);
            l_strReturn = StrConcat4(Translate(" Please pickup the plate from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
            l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Paddles had difficulties picking up the plate. "), l_strReturn);
            _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
            if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
            {
              l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
            }
            else
            {
              MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
              _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
              abort;
            }
          }   /* end if from skip handler if no error */
        }
      }
      if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
      {
        MECC::TraceComment(Translate("USER confirmed to transport the plate manually"));
        l_strReturn = StrConcat2(Translate(" Press OK to confirm the proper execution of manual transport step. Press CANCEL to abort the run."), Translate(""));
        l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Paddles had difficulties picking up the plate."), l_strReturn);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
        if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
        {
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually."), ASWGLOBAL::BOOL::TRUE);
        }
        else
        {
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
          abort;
        }
      }
    }
    if (l_blnManualTransportRequested == ASWGLOBAL::BOOL::FALSE)
    {
      o_strReadCurrentBarcode = Translate("");
      _DATA_AnalyzeStepReturnValueOfTransportStepAndWriteToReport(l_strStepReturnValueQCGGetPlate, l_strStepReturnValueQCGPlacePlate, i_intTransportTool, o_strReadCurrentBarcode);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_AnalyzeStepReturnValueOfTransportStepAndWriteToReport( variable i_strStepReturnValueGetPlate, variable i_strStepReturnValuePlacePlate, variable i_intTransportTool, variable i_strReadCurrentBarcode ) variable {
    private variable l_intNumberOfPositions;
    private variable l_strCurrentLabIDTarget;
    private variable l_strTransportTool;
    private variable l_strCurrentPosIDTarget;
    private variable l_strEmptyString;
    private variable l_intGetErrorRecovery;
    private variable l_strCurrentTime;
    private variable l_strCurrentDate;
    private variable l_strTransportInformation2;
    private variable l_strCurrentLabIDSource;
    private variable l_intIndexNumberOfPositions;
    private variable l_intGetSlaveErrorCode;
    private variable l_strGetStepData;
    private variable l_strTranslatedTransportnformation;
    private variable l_intGetMainErrorCode;
    private variable l_intGetPositionFromNum;
    private variable l_strTypeOfCurrentVariable;
    private variable l_strCurrentPosIDSource;
    private variable l_strTranslatedTransportInformation;
    private file l_hdlARWReportFile;
    private variable l_strComment;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strTypeOfCurrentVariable = StrGetType(i_strStepReturnValueGetPlate);
    if (l_strTypeOfCurrentVariable != "s")
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_strTypeOfCurrentVariable = StrGetType(i_strStepReturnValuePlacePlate);
    if (l_strTypeOfCurrentVariable != "s")
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    l_strCurrentDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    l_strCurrentTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    l_strEmptyString = Translate("");
    l_strTransportInformation2 = Translate(" transported to");
    if (i_intTransportTool == 1)
    {
      l_strTransportTool = Translate("InternalPlateGripper");
    }
    else
    {
      if (i_intTransportTool == 2)
      {
        l_strTransportTool = t_strTool;
      }
      else
      {
        l_strTransportTool = Translate("undefined tool - check definition");
      }
    }
    l_strTransportTool = StrConcat2(Translate(" used tool : "), l_strTransportTool);
    onerror goto errLabel_10 ;
    err.Clear();
    l_hdlARWReportFile.AddField("Date", l_strCurrentDate, hslString, 255);
    l_hdlARWReportFile.AddField("Time", l_strCurrentTime, hslString, 255);
    l_hdlARWReportFile.AddField("LabID Source", l_strCurrentLabIDSource, hslString, 255);
    l_hdlARWReportFile.AddField("PosID Source", l_strCurrentPosIDSource, hslString, 255);
    l_hdlARWReportFile.AddField("Transfer Volume", l_strTransportInformation2, hslString, 255);
    l_hdlARWReportFile.AddField("LabID Target", l_strCurrentLabIDTarget, hslString, 255);
    l_hdlARWReportFile.AddField("PosID Target", l_strCurrentPosIDTarget, hslString, 255);
    l_hdlARWReportFile.AddField("Barcode", i_strReadCurrentBarcode, hslString, 255);
    l_hdlARWReportFile.AddField("Transport information", l_strTranslatedTransportnformation, hslString, 255);
    l_hdlARWReportFile.AddField("Aspiration information", l_strTransportTool, hslString, 255);
    l_hdlARWReportFile.AddField("Dispense information", l_strEmptyString, hslString, 255);
    if( 0 == l_hdlARWReportFile.Open(t_strFullPathReportFile + " " + "RuntimeReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFullPathReportFile, "HxMetEdCompCmd");
    }
    errLabel_10 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      VectorCustomDialogs::MessageDialog(Translate("File handling warning"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("No data could be written or updated into the selected reprot file."));
    }   /* end if from skip handler if no error */
    l_intNumberOfPositions = StepReturn::GetNumberOfPositions(i_strStepReturnValueGetPlate);
    {
      for(l_intIndexNumberOfPositions = 0; l_intIndexNumberOfPositions < l_intNumberOfPositions;)
      {
        l_intIndexNumberOfPositions = l_intIndexNumberOfPositions + 1;
        l_intGetPositionFromNum = StepReturn::GetPositionFromNum(l_intIndexNumberOfPositions, i_strStepReturnValueGetPlate);
        l_strCurrentLabIDSource = StepReturn::GetLabwareId(l_intGetPositionFromNum, i_strStepReturnValueGetPlate);
        l_strCurrentPosIDSource = StepReturn::GetPositionId(l_intGetPositionFromNum, i_strStepReturnValueGetPlate);
        l_strGetStepData = StepReturn::GetStepData(l_intGetPositionFromNum, i_strStepReturnValueGetPlate);
        l_intGetMainErrorCode = StepReturn::GetMainError(l_intGetPositionFromNum, i_strStepReturnValueGetPlate);
        l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intGetPositionFromNum, i_strStepReturnValueGetPlate);
        l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intGetPositionFromNum, i_strStepReturnValueGetPlate);
        if (i_intTransportTool == 1)
        {
          _DATA_TranslateIPGErrorCodes(l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedTransportnformation);
        }
        if (i_intTransportTool == 2)
        {
          _DATA_TranslateChannelErrorCodes(2, l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedTransportnformation);
        }
        l_intGetPositionFromNum = StepReturn::GetPositionFromNum(l_intIndexNumberOfPositions, i_strStepReturnValuePlacePlate);
        l_strCurrentLabIDTarget = StepReturn::GetLabwareId(l_intGetPositionFromNum, i_strStepReturnValuePlacePlate);
        l_strCurrentPosIDTarget = StepReturn::GetPositionId(l_intGetPositionFromNum, i_strStepReturnValuePlacePlate);
        l_strGetStepData = StepReturn::GetStepData(l_intGetPositionFromNum, i_strStepReturnValuePlacePlate);
        l_intGetMainErrorCode = StepReturn::GetMainError(l_intGetPositionFromNum, i_strStepReturnValuePlacePlate);
        l_intGetSlaveErrorCode = StepReturn::GetSlaveError(l_intGetPositionFromNum, i_strStepReturnValuePlacePlate);
        l_intGetErrorRecovery = StepReturn::GetRecoveryButton(l_intGetPositionFromNum, i_strStepReturnValuePlacePlate);
        if (i_intTransportTool == 1)
        {
          _DATA_TranslateIPGErrorCodes(l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedTransportInformation);
        }
        if (i_intTransportTool == 2)
        {
          _DATA_TranslateChannelErrorCodes(2, l_intGetMainErrorCode, l_intGetSlaveErrorCode, l_intGetErrorRecovery, l_strTranslatedTransportInformation);
        }
        if( 0 == l_hdlARWReportFile.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != l_hdlARWReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlARWReportFile.RemoveFields();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_TranslateIPGErrorCodes( variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedTransportInformaton ) void {
    private variable l_strMainError;
    private variable l_intErrorValue;
    private variable l_strErrorRecovery;
    private variable l_strSlaveError;
    o_strTranslatedTransportInformaton = 0;
    l_intErrorValue = 0;
    l_strMainError = Translate("unknown error");
    l_strSlaveError = Translate("unknown error");
    l_strErrorRecovery = Translate("unknown error");
    if (i_intMainError == 0)
    {
      l_strMainError = Translate("No main error.");
    }
    if (i_intMainError == 1)
    {
      l_strMainError = Translate("Syntax error.");
    }
    if (i_intMainError == 2)
    {
      l_strMainError = Translate("Hardware error. Drive blocked, low power etc.");
    }
    if (i_intMainError == 3)
    {
      l_strMainError = Translate("Not Executed Error. There was an error in previous part command.");
    }
    if (i_intMainError == 4)
    {
      l_strMainError = Translate("Clot Error. Tip blocked.");
    }
    if (i_intMainError == 5)
    {
      l_strMainError = Translate("Barcode unreadable. Bad or missing barcode.");
    }
    if (i_intMainError == 6)
    {
      l_strMainError = Translate("Insufficient Liquid Error. Not enough liquid available.");
    }
    if (i_intMainError == 7)
    {
      l_strMainError = Translate("Tip already fitted. Repeated attempts to fit a tip or iSwap movement with tips.");
    }
    if (i_intMainError == 8)
    {
      l_strMainError = Translate("No Tip. Command was started without fitting tip. Tip was not fitted or fell off again.");
    }
    if (i_intMainError == 9)
    {
      l_strMainError = Translate("No Carrier. Load command without carrier performed.");
    }
    if (i_intMainError == 10)
    {
      l_strMainError = Translate("Not completed. Command in command buffer was aborted due to an error in a previous command, or command stack was deleted.");
    }
    if (i_intMainError == 11)
    {
      l_strMainError = Translate("Pressure LLD Error. A dispense with pressure liquid level detection is not allowed.");
    }
    if (i_intMainError == 12)
    {
      l_strMainError = Translate("No teach signal. X-Movement to LLD reached maximum allowable position without detecting teach signal.");
    }
    if (i_intMainError == 13)
    {
      l_strMainError = Translate("Loading tray error. Position already occupied.");
    }
    if (i_intMainError == 14)
    {
      l_strMainError = Translate("Pressure LLD Error. Pressure liquid level detection in a consecutive aspiration is not allowed.");
    }
    if (i_intMainError == 15)
    {
      l_strMainError = Translate("Not allowed parameter combination. I.e. pLLD and dispense or wrong X-drive assignment.");
    }
    if (i_intMainError == 16)
    {
      l_strMainError = Translate("Cover close error. Cover is not closed and couldn't be locked.");
    }
    if (i_intMainError == 17)
    {
      l_strMainError = Translate("Improper Aspiration or Dispense Error. The pressure-based aspiration / dispensation control reported an error ( not enough liquid ).");
    }
    if (i_intMainError == 18)
    {
      l_strMainError = Translate("Wash fluid or waste error. Missing wash fluid OR waste of particular washer is full.");
    }
    if (i_intMainError == 19)
    {
      l_strMainError = Translate("Incubation error. Incubator temperature out of limit.");
    }
    if (i_intMainError == 20)
    {
      l_strMainError = Translate("TADM overshot. Overshot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 21)
    {
      l_strMainError = Translate("No element. Expected element not detected.");
    }
    if (i_intMainError == 22)
    {
      l_strMainError = Translate("Element still holding. Get command is sent twice or element is not discarded.");
    }
    if (i_intMainError == 23)
    {
      l_strMainError = Translate("Element lost. Expected element is missing or lost.");
    }
    if (i_intMainError == 24)
    {
      l_strMainError = Translate("Illegal target plate position. Over or underflow of iSWAP positions OR iSWAP is not in park position during pipetting activities.");
    }
    if (i_intMainError == 25)
    {
      l_strMainError = Translate("Illegal user access. Carrier was manually removed or cover is open (immediate stop is executed).");
    }
    if (i_intMainError == 26)
    {
      l_strMainError = Translate("TADM undershot. Undershot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 27)
    {
      l_strMainError = Translate("Position Error. The position is out of range.");
    }
    if (i_intMainError == 28)
    {
      l_strMainError = Translate("Unexpected cLLD Error. The cLLD detected a liquid level above start height of liquid level search.");
    }
    if (i_intMainError == 29)
    {
      l_strMainError = Translate("Area already occupied. Its impossible to occupy area because this area is already in use.");
    }
    if (i_intMainError == 30)
    {
      l_strMainError = Translate("Impossible to occupy area. Area can't be occupied because is no solution for arm prepositioning.");
    }
    if (i_intMainError == 31)
    {
      l_strMainError = Translate("Anti drop control error. Anti drop controlling out of tolerance.");
    }
    if (i_intMainError == 32)
    {
      l_strMainError = Translate("Parameter out of range.");
    }
    if (i_intMainError == 33)
    {
      l_strMainError = Translate("Parameter does not belong to command, or not all parameters were sent.");
    }
    if (i_intMainError == 34)
    {
      l_strMainError = Translate("Node name unknown.");
    }
    if (i_intMainError == 35)
    {
      l_strMainError = Translate("ID parameter error.");
    }
    if (i_intMainError == 37)
    {
      l_strMainError = Translate("Node name defined twice.");
    }
    if (i_intMainError == 38)
    {
      l_strMainError = Translate("Faulty XL channel settings.");
    }
    if (i_intMainError == 39)
    {
      l_strMainError = Translate("Faulty robotic channel settings.");
    }
    if (i_intMainError == 40)
    {
      l_strMainError = Translate("PIP task busy.");
    }
    if (i_intMainError == 41)
    {
      l_strMainError = Translate("Auto load task busy.");
    }
    if (i_intMainError == 42)
    {
      l_strMainError = Translate("Miscellaneous task busy.");
    }
    if (i_intMainError == 43)
    {
      l_strMainError = Translate("Incubator task busy.");
    }
    if (i_intMainError == 44)
    {
      l_strMainError = Translate("Washer task busy.");
    }
    if (i_intMainError == 45)
    {
      l_strMainError = Translate("iSWAP task busy.");
    }
    if (i_intMainError == 46)
    {
      l_strMainError = Translate("CoRe 96 head task busy.");
    }
    if (i_intMainError == 47)
    {
      l_strMainError = Translate("Carrier sensor doesn't work properly.");
    }
    if (i_intMainError == 48)
    {
      l_strMainError = Translate("CoRe 384 head task busy.");
    }
    if (i_intMainError == 49)
    {
      l_strMainError = Translate("Nano pipettor task busy.");
    }
    if (i_intMainError == 50)
    {
      l_strMainError = Translate("XL channel task busy.");
    }
    if (i_intMainError == 51)
    {
      l_strMainError = Translate("Tube gripper task busy.");
    }
    if (i_intMainError == 52)
    {
      l_strMainError = Translate("Imaging channel task busy.");
    }
    if (i_intMainError == 53)
    {
      l_strMainError = Translate("Robotic channel task busy.");
    }
    if (i_intMainError == 99)
    {
      l_strMainError = Translate("Slave Error. This error code indicates an error in one of the slaves.");
    }
    if (i_intMainError == 102)
    {
      l_strMainError = Translate("Liquid Level Error. Liquid surface not detected.");
    }
    if (i_intMainError == 104)
    {
      l_strMainError = Translate("Not Aspirated Error. Dispense volume exceeds the aspirated volume.");
    }
    if (i_intMainError == 105)
    {
      l_strMainError = Translate("Improper Dispensation Error. The dispensed volume is out of tolerance (may only occur for Nano Pipettor Dispense steps).");
    }
    if (i_intSlaveError == 0)
    {
      l_strSlaveError = Translate("No slave error.");
    }
    if (i_intSlaveError == 20)
    {
      l_strSlaveError = Translate("No I²C Bus or EEPROM not working. Transfer check error. No communication to EEPROM.");
    }
    if (i_intSlaveError == 30)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined command.");
    }
    if (i_intSlaveError == 31)
    {
      l_strSlaveError = Translate("Syntax check error. Unknown parameter.");
    }
    if (i_intSlaveError == 32)
    {
      l_strSlaveError = Translate("Syntax check error. Parameter out of range.");
    }
    if (i_intSlaveError == 36)
    {
      l_strSlaveError = Translate("General error during execution of commands. Stop during execution of a command.");
    }
    if (i_intSlaveError == 37)
    {
      l_strSlaveError = Translate("General error during execution of commands. Adjustment sensor. The drive moved to maximal or minimal position without detecting the adjustment sensor.");
    }
    if (i_intSlaveError == 38)
    {
      l_strSlaveError = Translate("General error during execution of commands. Adjustment sensor. The adjustment sensor is switched before movement starts.");
    }
    if (i_intSlaveError == 40)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process.");
    }
    if (i_intSlaveError == 41)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process.");
    }
    if (i_intSlaveError == 42)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process.");
    }
    if (i_intSlaveError == 50)
    {
      l_strSlaveError = Translate("Y-drive - max movement without sensor edge recognition, supervision. Drive locked, init sensor fault may arise only on initialization command.");
    }
    if (i_intSlaveError == 51)
    {
      l_strSlaveError = Translate("Y-drive - Supervision. Movement command sent before drive initialized may arise on all movement commands except initialization command and re. movement without supervision.");
    }
    if (i_intSlaveError == 52)
    {
      l_strSlaveError = Translate("Y-drive - Movement error. Supervision. Drive locked, incremental sensor fault may arise on all movement commands..");
    }
    if (i_intSlaveError == 53)
    {
      l_strSlaveError = Translate("Y-drive - Movement error. position counter over-/ underflow. desired absolute position leads to an under-/overflow of position limitation. Drive does not execute any movement.");
    }
    if (i_intSlaveError == 60)
    {
      l_strSlaveError = Translate("Z-drive - Init failed. Drive locked.");
    }
    if (i_intSlaveError == 61)
    {
      l_strSlaveError = Translate("Z-drive - Drive not initialized. Movement command sent before drive initialized.");
    }
    if (i_intSlaveError == 62)
    {
      l_strSlaveError = Translate("Z-drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 63)
    {
      l_strSlaveError = Translate("Z-drive - Step monitoring. Movement error - desired absolute position leads to an under-/ overflow of position limitation.");
    }
    if (i_intSlaveError == 70)
    {
      l_strSlaveError = Translate("Rotation drive - Initialization failed. drive locked.");
    }
    if (i_intSlaveError == 71)
    {
      l_strSlaveError = Translate("Rotation drive - Drive not initialized. Movement command sent before drive initialized.");
    }
    if (i_intSlaveError == 72)
    {
      l_strSlaveError = Translate("Rotation drive - Movement error. Drive locked.");
    }
    if (i_intSlaveError == 73)
    {
      l_strSlaveError = Translate("Rotation drive - Movement error. desired absolute position leads to an under-/ overfleow of position limitation.");
    }
    if (i_intSlaveError == 80)
    {
      l_strSlaveError = Translate("Wrist twist drive - Initialization failed. Drive locked.");
    }
    if (i_intSlaveError == 81)
    {
      l_strSlaveError = Translate("Wrist twist drive - Drive not initialized. Movement command sent before drive initialized.");
    }
    if (i_intSlaveError == 82)
    {
      l_strSlaveError = Translate("Wrist twist drive - Movement error. Drive locked.");
    }
    if (i_intSlaveError == 83)
    {
      l_strSlaveError = Translate("Wrist twist drive - Movement error. Desire absolute position leads to an under-/ overflow of position limitation.");
    }
    if (i_intSlaveError == 85)
    {
      l_strSlaveError = Translate("Gripper drive - No communication to DMS digital potentiometer. Hardware error.");
    }
    if (i_intSlaveError == 86)
    {
      l_strSlaveError = Translate("Gripper drive - Auto adjustment of DMS digital potentiometer not possible. Hardware error.");
    }
    if (i_intSlaveError == 89)
    {
      l_strSlaveError = Translate("Gripper drive - Movement error. Drive locked.");
    }
    if (i_intSlaveError == 90)
    {
      l_strSlaveError = Translate("Gripper drive - Initialization failed. Drive locked.");
    }
    if (i_intSlaveError == 91)
    {
      l_strSlaveError = Translate("Gripper drive - Drive not initialized. Movement command sent before drive initialized.");
    }
    if (i_intSlaveError == 92)
    {
      l_strSlaveError = Translate("Gripper drive - Movement error. Drive locked.");
    }
    if (i_intSlaveError == 93)
    {
      l_strSlaveError = Translate("Gripper drive - Movement error. Desired absolute position leads to an under-/overflow of position limitation.");
    }
    if (i_intSlaveError == 94)
    {
      l_strSlaveError = Translate("Gripper drive - Plate not found. DMS sensor.");
    }
    if (i_intSlaveError == 96)
    {
      l_strSlaveError = Translate("Gripper drive - Plate not available. The expected object is no longer available. May be lost.");
    }
    if (i_intSlaveError == 97)
    {
      l_strSlaveError = Translate("Gripper drive - Not expected plate found. Not expected object is still gripped.");
    }
    if (i_intErrorRecovery == 0)
    {
      l_strErrorRecovery = Translate("No recovery.");
    }
    if (i_intErrorRecovery == 1)
    {
      l_strErrorRecovery = Translate("Abort - Run aborted.");
    }
    if (i_intErrorRecovery == 2)
    {
      l_strErrorRecovery = Translate("Cancel - run canceled or user defined errorhandling  was executed.");
    }
    if (i_intErrorRecovery == 3)
    {
      l_strErrorRecovery = Translate("Initialize. Instrument initialized again.");
    }
    if (i_intErrorRecovery == 4)
    {
      l_strErrorRecovery = Translate("Repeat. Command repeated.");
    }
    if (i_intErrorRecovery == 5)
    {
      l_strErrorRecovery = Translate("Exclude. Channel or position excluded until next tip pick up.");
    }
    if (i_intErrorRecovery == 6)
    {
      l_strErrorRecovery = Translate("Waste. Tip ejected to the default waste.");
    }
    if (i_intErrorRecovery == 7)
    {
      l_strErrorRecovery = Translate("Air. Rest of missing volume filled up with air.");
    }
    if (i_intErrorRecovery == 8)
    {
      l_strErrorRecovery = Translate("Bottom. Aspiration repeated on container bottom.");
    }
    if (i_intErrorRecovery == 9)
    {
      l_strErrorRecovery = Translate("Continue. Run continued without any change.");
    }
    if (i_intErrorRecovery == 10)
    {
      l_strErrorRecovery = Translate("Barcode. Barcode assigned manually.");
    }
    if (i_intErrorRecovery == 11)
    {
      l_strErrorRecovery = Translate("Next. Command repeated on next sequence position.");
    }
    if (i_intErrorRecovery == 12)
    {
      l_strErrorRecovery = Translate("Available. Available volume used.");
    }
    if (l_strMainError == "unknown error")
    {
      l_strMainError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strSlaveError == "unknown error")
    {
      l_strSlaveError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strErrorRecovery == "unknown error")
    {
      l_strErrorRecovery = Translate(" error not translated by library - check log file to retrieve data");
    }
    l_strMainError = StrConcat4(l_strMainError, Translate(" - code : "), i_intMainError, Translate(""));
    l_strSlaveError = StrConcat4(l_strSlaveError, Translate(" - code : "), i_intSlaveError, Translate(""));
    l_strErrorRecovery = StrConcat4(l_strErrorRecovery, Translate(" - code : "), i_intErrorRecovery, Translate(""));
    l_intErrorValue = l_intErrorValue + i_intMainError;
    l_intErrorValue = l_intErrorValue + i_intSlaveError;
    l_intErrorValue = l_intErrorValue + i_intErrorRecovery;
    if (l_intErrorValue == 0)
    {
      o_strTranslatedTransportInformaton = Translate("transport ok.");
    }
    else
    {
      o_strTranslatedTransportInformaton = StrConcat8(l_strMainError, Translate(" ; "), l_strSlaveError, Translate(" ; "), l_strErrorRecovery, Translate(""), Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_intMainError : "), i_intMainError);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_intSlaveError : "), i_intSlaveError);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_intErrorRecovery : "), i_intErrorRecovery);
    }
  }

  private function _DATA_TranslateChannelErrorCodes( variable i_intChannelPerformedTransportOrPipetteStep, variable i_intMainError, variable i_intSlaveError, variable i_intErrorRecovery, variable & o_strTranslatedPipettingInformaton ) void {
    private variable l_strMainError;
    private variable l_intErrorValue;
    private variable l_strErrorRecovery;
    private variable l_strSlaveError;
    o_strTranslatedPipettingInformaton = 0;
    l_intErrorValue = 0;
    l_strMainError = Translate("unknown error");
    l_strSlaveError = Translate("unknown error");
    l_strErrorRecovery = Translate("unknown error");
    if (i_intMainError == 0)
    {
      l_strMainError = Translate("No main error.");
    }
    if (i_intMainError == 1)
    {
      l_strMainError = Translate("Syntax error.");
    }
    if (i_intMainError == 2)
    {
      l_strMainError = Translate("Hardware error. Drive blocked, low power etc.");
    }
    if (i_intMainError == 3)
    {
      l_strMainError = Translate("Not Executed Error. There was an error in previous part command.");
    }
    if (i_intMainError == 4)
    {
      l_strMainError = Translate("Clot Error. Tip blocked.");
    }
    if (i_intMainError == 5)
    {
      l_strMainError = Translate("Barcode unreadable. Bad or missing barcode.");
    }
    if (i_intMainError == 6)
    {
      l_strMainError = Translate("Insufficient Liquid Error. Not enough liquid available.");
    }
    if (i_intMainError == 7)
    {
      l_strMainError = Translate("Tip already fitted. Repeated attempts to fit a tip or iSwap movement with tips.");
    }
    if (i_intMainError == 8)
    {
      l_strMainError = Translate("No Tip. Command was started without fitting tip. Tip was not fitted or fell off again.");
    }
    if (i_intMainError == 9)
    {
      l_strMainError = Translate("No Carrier. Load command without carrier performed.");
    }
    if (i_intMainError == 10)
    {
      l_strMainError = Translate("Not completed. Command in command buffer was aborted due to an error in a previous command, or command stack was deleted.");
    }
    if (i_intMainError == 11)
    {
      l_strMainError = Translate("Pressure LLD Error. A dispense with pressure liquid level detection is not allowed.");
    }
    if (i_intMainError == 12)
    {
      l_strMainError = Translate("No teach signal. X-Movement to LLD reached maximum allowable position without detecting teach signal.");
    }
    if (i_intMainError == 13)
    {
      l_strMainError = Translate("Loading tray error. Position already occupied.");
    }
    if (i_intMainError == 14)
    {
      l_strMainError = Translate("Pressure LLD Error. Pressure liquid level detection in a consecutive aspiration is not allowed.");
    }
    if (i_intMainError == 15)
    {
      l_strMainError = Translate("Not allowed parameter combination. I.e. pLLD and dispense or wrong X-drive assignment.");
    }
    if (i_intMainError == 16)
    {
      l_strMainError = Translate("Cover close error. Cover is not closed and couldn't be locked.");
    }
    if (i_intMainError == 17)
    {
      l_strMainError = Translate("Improper Aspiration or Dispense Error. The pressure-based aspiration / dispensation control reported an error ( not enough liquid ).");
    }
    if (i_intMainError == 18)
    {
      l_strMainError = Translate("Wash fluid or waste error. Missing wash fluid OR waste of particular washer is full.");
    }
    if (i_intMainError == 19)
    {
      l_strMainError = Translate("Incubation error. Incubator temperature out of limit.");
    }
    if (i_intMainError == 20)
    {
      l_strMainError = Translate("TADM overshot. Overshot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 21)
    {
      l_strMainError = Translate("No element. Expected element not detected.");
    }
    if (i_intMainError == 22)
    {
      l_strMainError = Translate("Element still holding. Get command is sent twice or element is not discarded.");
    }
    if (i_intMainError == 23)
    {
      l_strMainError = Translate("Element lost. Expected element is missing or lost.");
    }
    if (i_intMainError == 24)
    {
      l_strMainError = Translate("Illegal target plate position. Over or underflow of iSWAP positions OR iSWAP is not in park position during pipetting activities.");
    }
    if (i_intMainError == 25)
    {
      l_strMainError = Translate("Illegal user access. Carrier was manually removed or cover is open (immediate stop is executed).");
    }
    if (i_intMainError == 26)
    {
      l_strMainError = Translate("TADM undershot. Undershot of limits during aspirate or dispense.");
    }
    if (i_intMainError == 27)
    {
      l_strMainError = Translate("Position Error. The position is out of range.");
    }
    if (i_intMainError == 28)
    {
      l_strMainError = Translate("Unexpected cLLD Error. The cLLD detected a liquid level above start height of liquid level search.");
    }
    if (i_intMainError == 29)
    {
      l_strMainError = Translate("Area already occupied. Its impossible to occupy area because this area is already in use.");
    }
    if (i_intMainError == 30)
    {
      l_strMainError = Translate("Impossible to occupy area. Area can't be occupied because is no solution for arm prepositioning.");
    }
    if (i_intMainError == 31)
    {
      l_strMainError = Translate("Anti drop control error. Anti drop controlling out of tolerance.");
    }
    if (i_intMainError == 32)
    {
      l_strMainError = Translate("Parameter out of range.");
    }
    if (i_intMainError == 33)
    {
      l_strMainError = Translate("Parameter does not belong to command, or not all parameters were sent.");
    }
    if (i_intMainError == 34)
    {
      l_strMainError = Translate("Node name unknown.");
    }
    if (i_intMainError == 35)
    {
      l_strMainError = Translate("ID parameter error.");
    }
    if (i_intMainError == 37)
    {
      l_strMainError = Translate("Node name defined twice.");
    }
    if (i_intMainError == 38)
    {
      l_strMainError = Translate("Faulty XL channel settings.");
    }
    if (i_intMainError == 39)
    {
      l_strMainError = Translate("Faulty robotic channel settings.");
    }
    if (i_intMainError == 40)
    {
      l_strMainError = Translate("PIP task busy.");
    }
    if (i_intMainError == 41)
    {
      l_strMainError = Translate("Auto load task busy.");
    }
    if (i_intMainError == 42)
    {
      l_strMainError = Translate("Miscellaneous task busy.");
    }
    if (i_intMainError == 43)
    {
      l_strMainError = Translate("Incubator task busy.");
    }
    if (i_intMainError == 44)
    {
      l_strMainError = Translate("Washer task busy.");
    }
    if (i_intMainError == 45)
    {
      l_strMainError = Translate("iSWAP task busy.");
    }
    if (i_intMainError == 46)
    {
      l_strMainError = Translate("CoRe 96 head task busy.");
    }
    if (i_intMainError == 47)
    {
      l_strMainError = Translate("Carrier sensor doesn't work properly.");
    }
    if (i_intMainError == 48)
    {
      l_strMainError = Translate("CoRe 384 head task busy.");
    }
    if (i_intMainError == 49)
    {
      l_strMainError = Translate("Nano pipettor task busy.");
    }
    if (i_intMainError == 50)
    {
      l_strMainError = Translate("XL channel task busy.");
    }
    if (i_intMainError == 51)
    {
      l_strMainError = Translate("Tube gripper task busy.");
    }
    if (i_intMainError == 52)
    {
      l_strMainError = Translate("Imaging channel task busy.");
    }
    if (i_intMainError == 53)
    {
      l_strMainError = Translate("Robotic channel task busy.");
    }
    if (i_intMainError == 99)
    {
      l_strMainError = Translate("Slave Error. This error code indicates an error in one of the slaves.");
    }
    if (i_intMainError == 102)
    {
      l_strMainError = Translate("Liquid Level Error. Liquid surface not detected.");
    }
    if (i_intMainError == 104)
    {
      l_strMainError = Translate("Not Aspirated Error. Dispense volume exceeds the aspirated volume.");
    }
    if (i_intMainError == 105)
    {
      l_strMainError = Translate("Improper Dispensation Error. The dispensed volume is out of tolerance (may only occur for Nano Pipettor Dispense steps).");
    }
    if (i_intSlaveError == 0)
    {
      l_strSlaveError = Translate("No slave error.");
    }
    if (i_intSlaveError == 20)
    {
      l_strSlaveError = Translate("No I²C Bus or EEPROM not working. Transfer check error. No communication to EEPROM.");
    }
    if (i_intSlaveError == 30)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined command.");
    }
    if (i_intSlaveError == 31)
    {
      l_strSlaveError = Translate("Syntax check error. Undefined parameter.");
    }
    if (i_intSlaveError == 32)
    {
      l_strSlaveError = Translate("Syntax check error. Parameter out of range.");
    }
    if (i_intSlaveError == 35)
    {
      l_strSlaveError = Translate("General error during execution of commands. Voltages outside permitted range.");
    }
    if (i_intSlaveError == 36)
    {
      l_strSlaveError = Translate("General error during execution of commands. Stop during execution of a command.");
    }
    if (i_intSlaveError == 37)
    {
      l_strSlaveError = Translate("General error during execution of commands. Movement interrupted. 2nd CORE gripper pipetting channel has a step loss.");
    }
    if (i_intSlaveError == 40)
    {
      l_strSlaveError = Translate("Parallelity errors. No parallel processes permitted. Two or more commands sent for the same control process.");
    }
    if (i_intSlaveError == 50)
    {
      l_strSlaveError = Translate("Dispensing drive - Init position not found.");
    }
    if (i_intSlaveError == 51)
    {
      l_strSlaveError = Translate("Dispensing drive - Drive not initialized.");
    }
    if (i_intSlaveError == 52)
    {
      l_strSlaveError = Translate("Dispensing drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 53)
    {
      l_strSlaveError = Translate("Dispensing drive - Step monitoring. Maximum volume in tip reached.");
    }
    if (i_intSlaveError == 54)
    {
      l_strSlaveError = Translate("Dispensing drive - Position monitoring. Position out of permitted area.");
    }
    if (i_intSlaveError == 55)
    {
      l_strSlaveError = Translate("Y-drive - drive blocked.");
    }
    if (i_intSlaveError == 56)
    {
      l_strSlaveError = Translate("Y-drive - drive not initialized.");
    }
    if (i_intSlaveError == 57)
    {
      l_strSlaveError = Translate("Y-drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 60)
    {
      l_strSlaveError = Translate("Z-drive - drive blocked.");
    }
    if (i_intSlaveError == 61)
    {
      l_strSlaveError = Translate("Z-drive - drive not initialized.");
    }
    if (i_intSlaveError == 62)
    {
      l_strSlaveError = Translate("Z-drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 65)
    {
      l_strSlaveError = Translate("Squeezer -drive - drive blocked.");
    }
    if (i_intSlaveError == 66)
    {
      l_strSlaveError = Translate("Squeezer -drive - drive not initialized.");
    }
    if (i_intSlaveError == 67)
    {
      l_strSlaveError = Translate("Squeezer -drive - Step monitoring. Movement error - step loss detected.");
    }
    if (i_intSlaveError == 68)
    {
      l_strSlaveError = Translate("Squeezer -drive - Init position adjustment error.");
    }
    if (i_intSlaveError == 70)
    {
      l_strSlaveError = Translate("Liquid level detection - No liquid level found.");
    }
    if (i_intSlaveError == 71)
    {
      l_strSlaveError = Translate("Liquid level detection - Not enough liquid present.");
    }
    if (i_intSlaveError == 72)
    {
      l_strSlaveError = Translate("Liquid level detection - Auto calibration at pressure sensor not possible.");
    }
    if (i_intSlaveError == 73)
    {
      l_strSlaveError = Translate("Liquid level detection - No liquid level found with dual LLD.");
    }
    if (i_intSlaveError == 74)
    {
      l_strSlaveError = Translate("Liquid level detection - Liquid at a not allowed position detected.");
    }
    if (i_intSlaveError == 80)
    {
      l_strSlaveError = Translate("Liquid handling - Liquid not correctly aspirated.");
    }
    if (i_intSlaveError == 81)
    {
      l_strSlaveError = Translate("Liquid handling - Clot detected.");
    }
    if (i_intSlaveError == 82)
    {
      l_strSlaveError = Translate("Liquid handling - TADM measurement out of lower limit curve.");
    }
    if (i_intSlaveError == 83)
    {
      l_strSlaveError = Translate("Liquid handling - TADM measurement out of upper limit curve.");
    }
    if (i_intSlaveError == 84)
    {
      l_strSlaveError = Translate("Liquid handling - Not enough memory for TADM measurement.");
    }
    if (i_intSlaveError == 85)
    {
      l_strSlaveError = Translate("Liquid handling - No communication to digital potentiometer.");
    }
    if (i_intSlaveError == 86)
    {
      l_strSlaveError = Translate("Liquid handling - ADC algorithm error.");
    }
    if (i_intSlaveError == 87)
    {
      l_strSlaveError = Translate("Liquid handling - 2nd phase of liquid not found.");
    }
    if (i_intSlaveError == 88)
    {
      l_strSlaveError = Translate("Liquid handling - Not enough 2nd phase of liquid present. Immersion depth or surface following position below minimal access range.");
    }
    if (i_intSlaveError == 90)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve not resetable.");
    }
    if (i_intSlaveError == 91)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve not programable.");
    }
    if (i_intSlaveError == 92)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve name not found.");
    }
    if (i_intSlaveError == 93)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve data incorrect.");
    }
    if (i_intSlaveError == 94)
    {
      l_strSlaveError = Translate("TADM limit curve - not enough memory for limit curve.");
    }
    if (i_intSlaveError == 95)
    {
      l_strSlaveError = Translate("TADM limit curve - not allowed limit curve index.");
    }
    if (i_intSlaveError == 96)
    {
      l_strSlaveError = Translate("TADM limit curve - limit curve already stored.");
    }
    if (i_intSlaveError == 99)
    {
      l_strSlaveError = Translate("Pipetting head error - Return mesage of the command CH includes a pipetting head error.");
    }
    if (i_intErrorRecovery == 0)
    {
      l_strErrorRecovery = Translate("No recovery.");
    }
    if (i_intErrorRecovery == 1)
    {
      l_strErrorRecovery = Translate("Abort - Run aborted.");
    }
    if (i_intErrorRecovery == 2)
    {
      l_strErrorRecovery = Translate("Cancel - run canceled or user defined errorhandling  was executed.");
    }
    if (i_intErrorRecovery == 3)
    {
      l_strErrorRecovery = Translate("Initialize. Instrument initialized again.");
    }
    if (i_intErrorRecovery == 4)
    {
      l_strErrorRecovery = Translate("Repeat. Command repeated.");
    }
    if (i_intErrorRecovery == 5)
    {
      l_strErrorRecovery = Translate("Exclude. Channel or position excluded until next tip pick up.");
    }
    if (i_intErrorRecovery == 6)
    {
      l_strErrorRecovery = Translate("Waste. Tip ejected to the default waste.");
    }
    if (i_intErrorRecovery == 7)
    {
      l_strErrorRecovery = Translate("Air. Rest of missing volume filled up with air.");
    }
    if (i_intErrorRecovery == 8)
    {
      l_strErrorRecovery = Translate("Bottom. Aspiration repeated on container bottom.");
    }
    if (i_intErrorRecovery == 9)
    {
      l_strErrorRecovery = Translate("Continue. Run continued without any change.");
    }
    if (i_intErrorRecovery == 10)
    {
      l_strErrorRecovery = Translate("Barcode. Barcode assigned manually.");
    }
    if (i_intErrorRecovery == 11)
    {
      l_strErrorRecovery = Translate("Next. Command repeated on next sequence position.");
    }
    if (i_intErrorRecovery == 12)
    {
      l_strErrorRecovery = Translate("Available. Available volume used.");
    }
    if (l_strMainError == "unknown error")
    {
      l_strMainError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strSlaveError == "unknown error")
    {
      l_strSlaveError = Translate(" error not translated by library - check log file to retrieve data");
    }
    if (l_strErrorRecovery == "unknown error")
    {
      l_strErrorRecovery = Translate(" error not translated by library - check log file to retrieve data");
    }
    l_strMainError = StrConcat4(l_strMainError, Translate(" - code : "), i_intMainError, Translate(""));
    l_strSlaveError = StrConcat4(l_strSlaveError, Translate(" - code : "), i_intSlaveError, Translate(""));
    l_strErrorRecovery = StrConcat4(l_strErrorRecovery, Translate(" - code : "), i_intErrorRecovery, Translate(""));
    l_intErrorValue = l_intErrorValue + i_intMainError;
    l_intErrorValue = l_intErrorValue + i_intSlaveError;
    l_intErrorValue = l_intErrorValue + i_intErrorRecovery;
    if (l_intErrorValue == 0)
    {
      if (i_intChannelPerformedTransportOrPipetteStep == 1)
      {
        o_strTranslatedPipettingInformaton = Translate("pipetting step ok.");
      }
      if (i_intChannelPerformedTransportOrPipetteStep == 2)
      {
        o_strTranslatedPipettingInformaton = Translate("transport ok.");
      }
    }
    else
    {
      o_strTranslatedPipettingInformaton = StrConcat8(l_strMainError, Translate(" ; "), l_strSlaveError, Translate(" ; "), l_strErrorRecovery, Translate(""), Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_intMainError : "), i_intMainError);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_intSlaveError : "), i_intSlaveError);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("i_intErrorRecovery : "), i_intErrorRecovery);
    }
  }

  function Trp_Lid( device & ML_STAR, sequence & i_seqLIDStartingPosition, sequence & i_seqLIDDestination, variable i_blnParkTransportToolAfterMove, variable i_intGripMode, variable i_intTransportTool ) variable {
    private variable l_strTransportTool;
    private variable l_intGripMode;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strStepReturnValueQCGGetPlate;
    private variable l_intGripheight;
    private variable o_strReadCurrentBarcode;
    private variable l_intInverseGripValue;
    private variable l_blnLidTransportDetected;
    private variable l_strReturn;
    private variable l_blnManualTransportRequested;
    private variable l_strLabwareIDSource;
    private variable l_intReturnValueDialog;
    private variable l_strStepReturnValueQCGPlacePlate;
    private variable l_intGripOpeningAfterTransport;
    private variable l_intGripOpeningBeforeAccess;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strLabwareIDDestination;
    private variable l_strInformationToBeUpdated;
    private variable l_intGripWidth;
    private variable l_strComment;
    private variable l_intReturnSearchForWaste;
    private sequence l_seqLIDStartingPosition;
    private variable l_fltAngleTargetSequence;
    private variable l_fltYCoordinateTargetSequence;
    private variable l_fltZCoordinateTargetSequence;
    private variable l_fltXCoordinateTargetSequence;
    private variable l_blnDisableFolding_iSWAP;
    private variable l_intReturnSearchForStack;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqLIDStartingPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqLIDDestination);
    l_intReturnSearchForWaste = StrFind(l_strLabwareIDOfTargetSequence, Translate("Waste"));
    if (l_intReturnSearchForWaste >= 0)
    {
      VIRTUALLABWARE_V2::MoveCloneSeq(ML_STAR, i_seqLIDStartingPosition, l_seqLIDStartingPosition, 0, 0, 0);
    }
    else
    {
      SeqCopySequence(l_seqLIDStartingPosition, i_seqLIDStartingPosition);
    }
    if (t_intPlatformType == 0)
    {
      l_blnDisableFolding_iSWAP = ASWGLOBAL::BOOL::FALSE;
      l_intReturnSearchForStack = StrFind(l_strLabwareIDOfSourceSequence, Translate("Stack"));
      if (l_intReturnSearchForStack >= 0)
      {
        l_blnDisableFolding_iSWAP = ASWGLOBAL::BOOL::TRUE;
      }
    }
    l_blnLidTransportDetected = ASWGLOBAL::BOOL::FALSE;
    l_blnLidTransportDetected = StrFind(l_strLabwareIDOfSourceSequence, Translate("Lid"));
    if (l_blnLidTransportDetected >= 0)
    {
      l_blnLidTransportDetected = ASWGLOBAL::BOOL::TRUE;
      MECC::TraceComment(Translate("Lid transport detected"));
    }
    else
    {
      l_blnLidTransportDetected = StrFind(l_strLabwareIDOfSourceSequence, Translate("LID"));
      if (l_blnLidTransportDetected >= 0)
      {
        l_blnLidTransportDetected = ASWGLOBAL::BOOL::TRUE;
        MECC::TraceComment(Translate("Lid transport detected"));
      }
      else
      {
        MECC::TraceComment(Translate("No string called \"lid\" found within labware ID"));
      }
    }
    if (i_intTransportTool == 1)
    {
      l_strTransportTool = t_strToolArm;
    }
    else
    {
      if (i_intTransportTool == 2)
      {
        l_strTransportTool = t_strTool;
      }
      else
      {
        l_strTransportTool = Translate("undefined tool - check definition");
      }
    }
    l_strInformationToBeUpdated = Translate("");
    l_strInformationToBeUpdated = StrConcat8(Translate("Transport lid"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Tool used : "), l_strTransportTool, Translate("."));
    _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (i_intTransportTool == 1)
    {
      if (i_intGripMode == 1)
      {
        MECC::TraceComment(Translate("Grip the plate from large site (front from USER point of view) activated"));
        l_intGripMode = 1;
        l_intGripheight = 4;
        l_intGripWidth = 126;
        l_intGripOpeningBeforeAccess = 130;
        l_intInverseGripValue = 0;
        if (l_strLabwareIDOfTargetSequence == "Lid_Waste")
        {
          l_intGripOpeningAfterTransport = 135;
        }
        else
        {
          l_intGripOpeningAfterTransport = 132;
        }
      }
      if (i_intGripMode == 2)
      {
        MECC::TraceComment(Translate("Grip the plate from small site (right from USER point of view)  activated"));
        l_intGripMode = 0;
        l_intGripheight = 4;
        l_intGripWidth = 85.3;
        l_intGripOpeningBeforeAccess = 88.3;
        l_intInverseGripValue = 0;
        if (l_strLabwareIDOfTargetSequence == "Lid_Waste")
        {
          l_intGripOpeningAfterTransport = 95;
        }
        else
        {
          l_intGripOpeningAfterTransport = 89;
        }
      }
      if (i_intGripMode == 3)
      {
        MECC::TraceComment(Translate("Grip the plate from large site (back from USER point of view) activated"));
        l_intGripMode = 1;
        l_intGripheight = 4;
        l_intGripWidth = 126;
        l_intGripOpeningBeforeAccess = 130;
        l_intInverseGripValue = 1;
        if (l_strLabwareIDOfTargetSequence == "Lid_Waste")
        {
          l_intGripOpeningAfterTransport = 135;
        }
        else
        {
          l_intGripOpeningAfterTransport = 132;
        }
      }
      if (i_intGripMode == 4)
      {
        MECC::TraceComment(Translate("Grip the plate from small site (left from USER point of view)  activated"));
        l_intGripMode = 0;
        l_intGripheight = 4;
        l_intGripWidth = 85.3;
        l_intGripOpeningBeforeAccess = 88.3;
        l_intInverseGripValue = 1;
        if (l_strLabwareIDOfTargetSequence == "Lid_Waste")
        {
          l_intGripOpeningAfterTransport = 95;
        }
        else
        {
          l_intGripOpeningAfterTransport = 89;
        }
      }
      onerror goto errLabel_11 ;
      err.Clear();
      if (l_blnDisableFolding_iSWAP == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        	l_strStepReturnValueQCGGetPlate = arrRetValues[2];
      }
      l_blnManualTransportRequested = ASWGLOBAL::BOOL::FALSE;
      errLabel_11 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        l_strLabwareIDSource = SeqGetLabwareId(i_seqLIDStartingPosition);
        l_strLabwareIDDestination = SeqGetLabwareId(i_seqLIDDestination);
        l_strReturn = StrConcat4(Translate(" Please pickup the lid from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
        l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Gripper had difficulties picking up the lid."), l_strReturn);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
        if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
        {
          l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
          abort;
        }
      }   /* end if from skip handler if no error */
      if (l_blnManualTransportRequested == ASWGLOBAL::BOOL::FALSE)
      {
        onerror goto errLabel_12 ;
        err.Clear();
        DevGetLabwarePosition(ML_STAR, l_strLabwareIDOfTargetSequence, l_fltXCoordinateTargetSequence, l_fltYCoordinateTargetSequence, l_fltZCoordinateTargetSequence, l_fltAngleTargetSequence);
        if (t_intPlatformType == 1)
        {
          if (l_fltXCoordinateTargetSequence < t_strLeftLimitXCoordinateToStrechGripperArm)
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
              	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
            }
          }
          else
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
              	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
            }
          }
        }
        else
        {
          if (l_blnDisableFolding_iSWAP == ASWGLOBAL::BOOL::TRUE)
          {
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
            	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
          }
        }
        errLabel_12 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          l_strLabwareIDSource = SeqGetLabwareId(i_seqLIDStartingPosition);
          l_strLabwareIDDestination = SeqGetLabwareId(i_seqLIDDestination);
          l_strReturn = StrConcat4(Translate(" Please pickup the lid from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
          l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Gripper had difficulties picking up the lid."), l_strReturn);
          _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
          if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
          {
            l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
          }
          else
          {
            MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
            _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
            abort;
          }
        }   /* end if from skip handler if no error */
      }
      if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
      {
        MECC::TraceComment(Translate("USER confirmed to transport the plate manually"));
        l_strReturn = StrConcat2(Translate(" Press OK to confirm the proper execution of manual transport step. Press CANCEL to abort the run."), Translate(""));
        l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Gripper had difficulties picking up the lid."), l_strReturn);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
        if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
        {
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually."), ASWGLOBAL::BOOL::TRUE);
        }
        else
        {
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
          abort;
        }
      }
      if (i_blnParkTransportToolAfterMove == 1)
      {
        ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
    }
    if (i_intTransportTool == 2)
    {
      l_intGripMode = 0;
      l_intGripheight = 3;
      l_intGripWidth = 85.3;
      l_intGripOpeningBeforeAccess = 91;
      l_intInverseGripValue = 0;
      l_strInformationToBeUpdated = Translate("");
      onerror goto errLabel_13 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        	l_strStepReturnValueQCGGetPlate = arrRetValues[2];
      }
      errLabel_13 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        l_strLabwareIDSource = SeqGetLabwareId(i_seqLIDStartingPosition);
        l_strLabwareIDDestination = SeqGetLabwareId(i_seqLIDDestination);
        l_strReturn = StrConcat4(Translate(" Please pickup the lid from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
        l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Paddles had difficulties picking up the lid. "), l_strReturn);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
        if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
        {
          l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
          abort;
        }
      }   /* end if from skip handler if no error */
      if (i_blnParkTransportToolAfterMove == 1)
      {
        onerror goto errLabel_14 ;
        err.Clear();
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
        }
        errLabel_14 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
          }
          l_strLabwareIDSource = SeqGetLabwareId(i_seqLIDStartingPosition);
          l_strLabwareIDDestination = SeqGetLabwareId(i_seqLIDDestination);
          l_strReturn = StrConcat4(Translate(" Please pickup the lid from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
          l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Paddles had difficulties picking up the lid. "), l_strReturn);
          _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
          if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
          {
            l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
          }
          else
          {
            MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
            _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
            abort;
          }
        }   /* end if from skip handler if no error */
      }
      else
      {
        onerror goto errLabel_15 ;
        err.Clear();
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
        }
        errLabel_15 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
          }
          l_strLabwareIDSource = SeqGetLabwareId(i_seqLIDStartingPosition);
          l_strLabwareIDDestination = SeqGetLabwareId(i_seqLIDDestination);
          l_strReturn = StrConcat4(Translate(" Please pickup the lid from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
          l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Paddles had difficulties picking up the lid. "), l_strReturn);
          _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
          if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
          {
            l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
          }
          else
          {
            MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
            _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
            abort;
          }
        }   /* end if from skip handler if no error */
      }
      if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
      {
        MECC::TraceComment(Translate("USER confirmed to transport the plate manually"));
        l_strReturn = StrConcat2(Translate(" Press OK to confirm the proper execution of manual transport step. Press CANCEL to abort the run."), Translate(""));
        l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Paddles had difficulties picking up the lid. "), l_strReturn);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
        if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
        {
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually."), ASWGLOBAL::BOOL::TRUE);
        }
        else
        {
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
          abort;
        }
      }
    }
    if (l_blnManualTransportRequested == ASWGLOBAL::BOOL::FALSE)
    {
      o_strReadCurrentBarcode = Translate("");
      _DATA_AnalyzeStepReturnValueOfTransportStepAndWriteToReport(l_strStepReturnValueQCGGetPlate, l_strStepReturnValueQCGPlacePlate, i_intTransportTool, o_strReadCurrentBarcode);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Trp_PCRAndScanBarcode( device & ML_STAR, sequence & i_seqPCRStartingPosition, sequence & i_seqPCRDestinationPosition, variable i_blnParkTransportToolAfterMove, variable i_intGripMode, variable i_intTransportTool, variable i_intTrackNumberReadBarcode ) variable {
    private variable l_strTransportTool;
    private variable l_intGripMode;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strStepReturnValueQCGGetPlate;
    private variable o_strReadCurrentBarcode;
    private variable l_fltDistanceinMMPressPlateDuringPlacePlateCommand;
    private variable l_intInverseGripValue;
    private variable l_blnPlateCheck;
    private variable l_strReturn;
    private variable l_blnManualTransportRequested;
    private variable l_strLabwareIDSource;
    private variable l_intReturnValueDialog;
    private variable l_strStepReturnValueQCGPlacePlate;
    private variable l_intGripperOpeningWidthBeforeAccess;
    private variable l_intGripOpeningBeforeAccess;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDDestination;
    private variable l_intGripWidth;
    private variable l_strCurrentBarcode;
    private dialog dialogHandle_16;
    private dialog dialogHandle_17;
    private variable l_strComment;
    private dialog dialogHandle_18;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqPCRStartingPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqPCRDestinationPosition);
    if (i_intTransportTool == 1)
    {
      l_strTransportTool = t_strToolArm;
    }
    else
    {
      if (i_intTransportTool == 2)
      {
        l_strTransportTool = t_strTool;
      }
      else
      {
        l_strTransportTool = Translate("undefined tool - check definition");
      }
    }
    l_strInformationToBeUpdated = Translate("");
    l_strInformationToBeUpdated = StrConcat8(Translate("Transport PCR plate "), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Tool used : "), l_strTransportTool, Translate("."));
    _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (i_intTransportTool == 1)
    {
      if (i_intGripMode == 1)
      {
        MECC::TraceComment(Translate("Grip the plate from large site (front from USER point of view) activated"));
        l_intGripMode = 1;
        l_intGripWidth = 124.5;
        l_intGripOpeningBeforeAccess = 130;
        l_intInverseGripValue = 0;
      }
      if (i_intGripMode == 2)
      {
        MECC::TraceComment(Translate("Grip the plate from small site (right from USER point of view)  activated"));
        l_intGripMode = 0;
        l_intGripWidth = 82.5;
        l_intGripOpeningBeforeAccess = 85.5;
        l_intInverseGripValue = 0;
      }
      if (i_intGripMode == 3)
      {
        MECC::TraceComment(Translate("Grip the plate from large site (back from USER point of view) activated"));
        l_intGripMode = 1;
        l_intGripWidth = 124.5;
        l_intGripOpeningBeforeAccess = 130;
        l_intInverseGripValue = 1;
      }
      if (i_intGripMode == 4)
      {
        MECC::TraceComment(Translate("Grip the plate from small site (left from USER point of view)  activated"));
        l_intGripMode = 0;
        l_intGripWidth = 82.5;
        l_intGripOpeningBeforeAccess = 85.5;
        l_intInverseGripValue = 1;
      }
      onerror goto errLabel_19 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        	l_strStepReturnValueQCGGetPlate = arrRetValues[2];
      }
      l_blnManualTransportRequested = ASWGLOBAL::BOOL::FALSE;
      errLabel_19 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        l_strLabwareIDSource = SeqGetLabwareId(i_seqPCRStartingPosition);
        l_strLabwareIDDestination = SeqGetLabwareId(i_seqPCRDestinationPosition);
        l_strReturn = StrConcat4(Translate(" Please pickup the PCR plate from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
        l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Gripper had difficulties picking up the plate. "), l_strReturn);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
        if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
        {
          l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
          abort;
        }
      }   /* end if from skip handler if no error */
      if (l_blnManualTransportRequested == ASWGLOBAL::BOOL::FALSE)
      {
        onerror goto errLabel_20 ;
        err.Clear();
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._3ADE1686_D394_4a08_918C_20E3EDA3CC69("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"); // ReadPlateBarcode
          	l_strCurrentBarcode = arrRetValues[3];
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strCurrentBarcode : "), l_strCurrentBarcode);
        errLabel_20 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          MECC::TraceComment(Translate("Barcode reading failed during transport. STARV or VANTAGE are not supporting this command. A GUI will ask th User to manually enter the BC..."));
          dialogHandle_18.SetInputSize(1);
          dialogHandle_18.SetInputField(0, Translate("Please enter the current barcode manually. After 60 seconds this dialog will close automatically."), hslString, "Your barcode");
          dialogHandle_18.ShowInput(Translate("Barcode reading activated"), 60, hslOKOnly | hslDefButton1);
          l_strCurrentBarcode = dialogHandle_18.GetInputField(0);
          if (l_strCurrentBarcode == "Your barcode")
          {
            l_strCurrentBarcode = Translate("No barcode");
          }
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strCurrentBarcode : "), l_strCurrentBarcode);
        }   /* end if from skip handler if no error */
      }
      else
      {
        dialogHandle_16.SetInputSize(1);
        dialogHandle_16.SetInputField(0, Translate("Please enter the current barcode manually. After 60 seconds this dialog will close automatically."), hslString, "Your barcode");
        dialogHandle_16.ShowInput(Translate("Barcode reading activated"), 60, hslOKOnly | hslDefButton1);
        l_strCurrentBarcode = dialogHandle_16.GetInputField(0);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strCurrentBarcode : "), l_strCurrentBarcode);
      }
      VectorCustomDialogs::AppendStatusText(l_strCurrentBarcode);
      if (l_blnManualTransportRequested == ASWGLOBAL::BOOL::FALSE)
      {
        onerror goto errLabel_21 ;
        err.Clear();
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
          	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
        }
        errLabel_21 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          l_strLabwareIDSource = SeqGetLabwareId(i_seqPCRStartingPosition);
          l_strLabwareIDDestination = SeqGetLabwareId(i_seqPCRDestinationPosition);
          l_strReturn = StrConcat4(Translate(" Please pickup the PCR plate from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
          l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Gripper had difficulties picking up the plate. "), l_strReturn);
          _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
          if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
          {
            l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
          }
          else
          {
            MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
            _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
            abort;
          }
        }   /* end if from skip handler if no error */
      }
      if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
      {
        MECC::TraceComment(Translate("USER confirmed to transport the plate manually"));
        l_strReturn = StrConcat2(Translate(" Press OK to confirm the proper execution of manual transport step. Press CANCEL to abort the run."), Translate(""));
        l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Gripper had difficulties picking up the plate. "), l_strReturn);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
        if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
        {
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually."), ASWGLOBAL::BOOL::TRUE);
        }
        else
        {
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
          abort;
        }
      }
      if (i_blnParkTransportToolAfterMove == 1)
      {
        ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
    }
    if (i_intTransportTool == 2)
    {
      l_intGripWidth = 80;
      l_intGripperOpeningWidthBeforeAccess = 86;
      MECC::TraceComment(Translate("Using QCG grippers for HSP movements"));
      onerror goto errLabel_22 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        	l_strStepReturnValueQCGGetPlate = arrRetValues[2];
      }
      errLabel_22 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        l_strLabwareIDSource = SeqGetLabwareId(i_seqPCRStartingPosition);
        l_strLabwareIDDestination = SeqGetLabwareId(i_seqPCRDestinationPosition);
        l_strReturn = StrConcat4(Translate(" Please pickup the plate from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
        l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Paddles had difficulties picking up the plate. "), l_strReturn);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
        if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
        {
          l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
          abort;
        }
      }   /* end if from skip handler if no error */
      l_fltDistanceinMMPressPlateDuringPlacePlateCommand = 0;
      l_blnPlateCheck = 0;
      if (l_blnManualTransportRequested == ASWGLOBAL::BOOL::FALSE)
      {
        onerror goto errLabel_23 ;
        err.Clear();
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._E59329BC_113D_451D_9468_F2327ECEE33E("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"); // ZSwapReadBarcode
          	l_strCurrentBarcode = arrRetValues[3];
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strCurrentBarcode : "), l_strCurrentBarcode);
        errLabel_23 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          MECC::TraceComment(Translate("Barcode reading failed during transport."));
          l_strCurrentBarcode = Translate("No barcode.");
        }   /* end if from skip handler if no error */
      }
      else
      {
        dialogHandle_17.SetInputSize(1);
        dialogHandle_17.SetInputField(0, Translate("Please enter the current barcode manually. After 60 seconds this dialog will close automatically."), hslString, "Your barcode");
        dialogHandle_17.ShowInput(Translate("Barcode reading activated"), 60, hslOKOnly | hslDefButton1);
        l_strCurrentBarcode = dialogHandle_17.GetInputField(0);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_strCurrentBarcode : "), l_strCurrentBarcode);
      }
      VectorCustomDialogs::AppendStatusText(l_strCurrentBarcode);
      if (l_blnManualTransportRequested == ASWGLOBAL::BOOL::FALSE)
      {
        if (i_blnParkTransportToolAfterMove == 1)
        {
          onerror goto errLabel_24 ;
          err.Clear();
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
          }
          errLabel_24 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
              	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
            }
            l_strLabwareIDSource = SeqGetLabwareId(i_seqPCRStartingPosition);
            l_strLabwareIDDestination = SeqGetLabwareId(i_seqPCRDestinationPosition);
            l_strReturn = StrConcat4(Translate(" Please pickup the plate from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
            l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Paddles had difficulties picking up the plate. "), l_strReturn);
            _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
            if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
            {
              l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
            }
            else
            {
              MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
              _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
              abort;
            }
          }   /* end if from skip handler if no error */
        }
        else
        {
          onerror goto errLabel_25 ;
          err.Clear();
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
          }
          errLabel_25 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
              	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
            }
            l_strLabwareIDSource = SeqGetLabwareId(i_seqPCRStartingPosition);
            l_strLabwareIDDestination = SeqGetLabwareId(i_seqPCRDestinationPosition);
            l_strReturn = StrConcat4(Translate(" Please pickup the plate from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
            l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Paddles had difficulties picking up the plate. "), l_strReturn);
            _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
            if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
            {
              l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
            }
            else
            {
              MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
              _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
              abort;
            }
          }   /* end if from skip handler if no error */
        }
      }
      if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
      {
        MECC::TraceComment(Translate("USER confirmed to transport the plate manually"));
        l_strReturn = StrConcat2(Translate(" Press OK to confirm the proper execution of manual transport step. Press CANCEL to abort the run."), Translate(""));
        l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Paddles had difficulties picking up the plate. "), l_strReturn);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
        if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
        {
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually."), ASWGLOBAL::BOOL::TRUE);
        }
        else
        {
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
          abort;
        }
      }
    }
    if (l_blnManualTransportRequested == ASWGLOBAL::BOOL::FALSE)
    {
      o_strReadCurrentBarcode = l_strCurrentBarcode;
      _DATA_AnalyzeStepReturnValueOfTransportStepAndWriteToReport(l_strStepReturnValueQCGGetPlate, l_strStepReturnValueQCGPlacePlate, i_intTransportTool, o_strReadCurrentBarcode);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _DATA_TranslateVectorCustomDialogsErrorCodes( variable i_intBindReturnValue ) void {
    private variable l_blnSkipDialog;
    private variable l_strErrorMessage;
    private variable l_intBindReturnValue;
    if (i_intBindReturnValue >= ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      if (i_intBindReturnValue == ASWGLOBAL::BOOL::FALSE)
      {
        l_blnSkipDialog = ASWGLOBAL::BOOL::TRUE;
        l_strErrorMessage = Translate("Command did not end successfully ");
      }
      else
      {
        l_blnSkipDialog = ASWGLOBAL::BOOL::FALSE;
      }
      if (i_intBindReturnValue == -1)
      {
        l_strErrorMessage = Translate("Sizes of initialization arrays are inhomogeneous. Hint : Check your arrays (sizes have to be equal). ");
      }
      if (i_intBindReturnValue == -2)
      {
        l_strErrorMessage = Translate("Data range / type. Hint : Used range or range in combination with data type is invalid.");
      }
      if (i_intBindReturnValue == -5)
      {
        l_strErrorMessage = Translate("IconSet Directory. Hint : Make sure that the directory named “ASWIconSet” exists inside the directory of ASWStandardDialogs library.");
      }
      if (i_intBindReturnValue == -8)
      {
        l_strErrorMessage = Translate("Dialog has been closed through timeout. Hint : This may or may not be an error, depending on the programmer’s intention. Clicking on a dialog interrupts timer and thus does not lead to a error.");
      }
      if (i_intBindReturnValue == -9)
      {
        l_strErrorMessage = Translate("The dialog was not . Hint : Do not use shortcuts to close the dialog, use buttons from the dialog.");
      }
      if (i_intBindReturnValue == -10)
      {
        l_strErrorMessage = Translate("Library is not initialized. Hint : Initialize library before any other function is called.");
      }
      if (i_intBindReturnValue == -11)
      {
        l_strErrorMessage = Translate("Bad Parameter. Hint : See trace for more information about which parameter caused the error. Adjust the input parameter accordingly.");
      }
      if (i_intBindReturnValue == -1000)
      {
        l_strErrorMessage = Translate("A COM error has occured. Hint : Please ensure that the com library HamiltonASWGUI.Dialogs.dll is registered.");
      }
      if (i_intBindReturnValue == -1001)
      {
        l_strErrorMessage = Translate("A COM error has occured. Hint : You cannot execute more dialogs at the same time than defined in the HSL library (default is dialog at a time).");
      }
      if (l_blnSkipDialog == ASWGLOBAL::BOOL::FALSE)
      {
        l_intBindReturnValue = VectorCustomDialogs::MessageDialog(Translate("Error message of Vector Custom Dialogs. OK is trying to continue the run ignoring the error - CANCEL will abort the run"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 60, l_strErrorMessage);
        if (l_intBindReturnValue == ASWGLOBAL::DIALOG::CANCEL)
        {
          abort;
        }
      }
    }
  }

  private function _CheckSytemConnected( device & ML_STAR ) void {
    private variable l_strDeviceName;
    private variable l_strDeviceViewName;
    l_strDeviceName = DevGetInstrumentName(ML_STAR);
    l_strDeviceViewName = DevGetInstrumentViewName(ML_STAR);
    t_intPlatformType = 0;
    InstrumentTypeHelper::GetStarType(t_intPlatformType);
    TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("l_strDeviceName : "), l_strDeviceName, Translate(" - l_strDeviceViewName : "), l_strDeviceViewName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(" Platform type 0 = STARline; 1 = STARVline"), t_intPlatformType);
  }

  function Trp_MIDI( device & ML_STAR, sequence & i_seqMIDIStartingPosition, sequence & i_seqMIDIDestinationPosition, variable i_blnParkTransportToolAfterMove, variable i_intGripMode, variable i_intTransportTool ) variable {
    private variable l_intPressOnDistance;
    private variable l_strComment;
    private variable l_intGripHeight;
    private variable l_fltAngleTargetSequence;
    private variable l_strTransportTool;
    private variable l_intGripMode;
    private variable l_strSourceLabwareID;
    private variable l_strReturnValueFoundSubString;
    private variable l_fltYCoordinateTargetSequence;
    private variable l_strLabwareIDOfSourceSequence;
    private variable l_strStepReturnValueQCGGetPlate;
    private variable o_strReadCurrentBarcode;
    private variable l_intInverseGripValue;
    private variable l_blnPlateCheck;
    private variable l_strReturn;
    private variable l_blnManualTransportRequested;
    private variable l_fltZCoordinateTargetSequence;
    private variable l_strLabwareIDSource;
    private variable l_intReturnValueDialog;
    private variable l_strStepReturnValueQCGPlacePlate;
    private variable l_fltXCoordinateTargetSequence;
    private variable l_intReturnSearchForWaste;
    private variable l_intGripperOpeningWidthBeforeAccess;
    private variable l_intGripOpeningBeforeAccess;
    private variable l_strReturnValueDestinationLabwareID;
    private variable l_strLabwareIDOfTargetSequence;
    private variable l_strInformationToBeUpdated;
    private variable l_strLabwareIDDestination;
    private variable l_intGripWidth;
    private sequence l_seqMIDIStartingPosition;
    l_strComment = Translate("");
    t_strFunctionName = GetFunctionName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, t_strFunctionName, t_strLibraryName, l_strComment);
    l_strLabwareIDOfSourceSequence = SeqGetLabwareId(i_seqMIDIStartingPosition);
    l_strLabwareIDOfTargetSequence = SeqGetLabwareId(i_seqMIDIDestinationPosition);
    l_intReturnSearchForWaste = StrFind(l_strLabwareIDOfTargetSequence, Translate("Waste"));
    if (l_intReturnSearchForWaste >= 0)
    {
      VIRTUALLABWARE_V2::MoveCloneSeq(ML_STAR, i_seqMIDIStartingPosition, l_seqMIDIStartingPosition, 0, 0, 0);
    }
    else
    {
      SeqCopySequence(l_seqMIDIStartingPosition, i_seqMIDIStartingPosition);
    }
    if (i_intTransportTool == 1)
    {
      l_strTransportTool = t_strToolArm;
    }
    else
    {
      if (i_intTransportTool == 2)
      {
        l_strTransportTool = t_strTool;
      }
      else
      {
        l_strTransportTool = Translate("undefined tool - check definition");
      }
    }
    l_strInformationToBeUpdated = Translate("");
    l_strInformationToBeUpdated = StrConcat8(Translate("Transport MIDI"), Translate(" : "), l_strLabwareIDOfSourceSequence, Translate(" -----> "), l_strLabwareIDOfTargetSequence, Translate(". Tool used : "), l_strTransportTool, Translate("."));
    _DATA_UpdateInformationIntoReportFile(l_strInformationToBeUpdated, ASWGLOBAL::BOOL::TRUE);
    if (i_intTransportTool == 1)
    {
      if (i_intGripMode == 1)
      {
        MECC::TraceComment(Translate("Grip the plate from large site (front from USER point of view) activated"));
        l_intGripMode = 1;
        l_intGripWidth = 1245;
        l_intGripOpeningBeforeAccess = 130;
        l_intInverseGripValue = 0;
      }
      if (i_intGripMode == 2)
      {
        MECC::TraceComment(Translate("Grip the plate from small site (right from USER point of view)  activated"));
        l_intGripMode = 0;
        l_intGripWidth = 80;
        l_intGripOpeningBeforeAccess = 87;
        l_intInverseGripValue = 0;
      }
      if (i_intGripMode == 3)
      {
        MECC::TraceComment(Translate("Grip the plate from large site (back from USER point of view) activated"));
        l_intGripMode = 1;
        l_intGripWidth = 1245;
        l_intGripOpeningBeforeAccess = 130;
        l_intInverseGripValue = 1;
      }
      if (i_intGripMode == 4)
      {
        MECC::TraceComment(Translate("Grip the plate from small site (left from USER point of view)  activated"));
        l_intGripMode = 0;
        l_intGripWidth = 80;
        l_intGripOpeningBeforeAccess = 87;
        l_intInverseGripValue = 1;
      }
      onerror goto errLabel_26 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        	l_strStepReturnValueQCGGetPlate = arrRetValues[2];
      }
      l_blnManualTransportRequested = ASWGLOBAL::BOOL::FALSE;
      errLabel_26 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        l_strLabwareIDSource = SeqGetLabwareId(i_seqMIDIStartingPosition);
        l_strLabwareIDDestination = SeqGetLabwareId(i_seqMIDIDestinationPosition);
        l_strReturn = StrConcat4(Translate(" Please pickup the plate from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
        l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Gripper had difficulties picking up the plate. "), l_strReturn);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
        if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
        {
          l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
          abort;
        }
      }   /* end if from skip handler if no error */
      if (l_blnManualTransportRequested == ASWGLOBAL::BOOL::FALSE)
      {
        onerror goto errLabel_27 ;
        err.Clear();
        DevGetLabwarePosition(ML_STAR, l_strLabwareIDOfTargetSequence, l_fltXCoordinateTargetSequence, l_fltYCoordinateTargetSequence, l_fltZCoordinateTargetSequence, l_fltAngleTargetSequence);
        if (t_intPlatformType == 1)
        {
          if (l_fltXCoordinateTargetSequence < t_strLeftLimitXCoordinateToStrechGripperArm)
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
              	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
            }
          }
          else
          {
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
              	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
            }
          }
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
            	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
          }
        }
        errLabel_27 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          l_strLabwareIDSource = SeqGetLabwareId(i_seqMIDIStartingPosition);
          l_strLabwareIDDestination = SeqGetLabwareId(i_seqMIDIDestinationPosition);
          l_strReturn = StrConcat4(Translate(" Please pickup the plate from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
          l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Gripper had difficulties picking up the plate. "), l_strReturn);
          _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
          if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
          {
            l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
          }
          else
          {
            MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
            _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
            abort;
          }
        }   /* end if from skip handler if no error */
      }
      if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
      {
        MECC::TraceComment(Translate("USER confirmed to transport the plate manually"));
        l_strReturn = StrConcat2(Translate(" Press OK to confirm the proper execution of manual transport step. Press CANCEL to abort the run."), Translate(""));
        l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Gripper had difficulties picking up the plate. "), l_strReturn);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
        if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
        {
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually."), ASWGLOBAL::BOOL::TRUE);
        }
        else
        {
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
          abort;
        }
      }
      if (i_blnParkTransportToolAfterMove == 1)
      {
        ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
    }
    if (i_intTransportTool == 2)
    {
      MECC::TraceComment(Translate("Using QCG grippers for MIDI movements"));
      l_intGripWidth = 79;
      l_intGripperOpeningWidthBeforeAccess = 87;
      l_strReturnValueDestinationLabwareID = SeqGetLabwareId(i_seqMIDIDestinationPosition);
      l_strSourceLabwareID = SeqGetLabwareId(i_seqMIDIStartingPosition);
      l_strReturnValueFoundSubString = StrFind(l_strSourceLabwareID, Translate("MIDI"));
      if (l_strReturnValueFoundSubString < 0)
      {
        l_intGripHeight = 15;
      }
      else
      {
        l_intGripHeight = 8;
      }
      onerror goto errLabel_28 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        	l_strStepReturnValueQCGGetPlate = arrRetValues[2];
      }
      errLabel_28 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        l_strLabwareIDSource = SeqGetLabwareId(i_seqMIDIStartingPosition);
        l_strLabwareIDDestination = SeqGetLabwareId(i_seqMIDIDestinationPosition);
        l_strReturn = StrConcat4(Translate(" Please pickup the plate from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
        l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Paddles had difficulties picking up the plate. "), l_strReturn);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
        if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
        {
          l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
          abort;
        }
      }   /* end if from skip handler if no error */
      l_blnPlateCheck = 0;
      l_intPressOnDistance = 0;
      if (l_blnManualTransportRequested == ASWGLOBAL::BOOL::FALSE)
      {
        if (i_blnParkTransportToolAfterMove == 1)
        {
          onerror goto errLabel_29 ;
          err.Clear();
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
          }
          errLabel_29 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            MECC::TraceComment(Translate("place back the plate and get rid of tool"));
            {
              	variable arrRetValues[];
              	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
              	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
            }
            l_strLabwareIDSource = SeqGetLabwareId(i_seqMIDIStartingPosition);
            l_strLabwareIDDestination = SeqGetLabwareId(i_seqMIDIDestinationPosition);
            l_strReturn = StrConcat4(Translate(" Please pickup the plate from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
            l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Paddles had difficulties picking up the plate. "), l_strReturn);
            if(0){
              _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
            }
            if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
            {
              l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
            }
            else
            {
              MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
              if(0){
                _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
              }
              abort;
            }
          }   /* end if from skip handler if no error */
        }
        else
        {
          onerror goto errLabel_30 ;
          err.Clear();
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            	l_strStepReturnValueQCGPlacePlate = arrRetValues[2];
          }
          errLabel_30 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_strLabwareIDSource = SeqGetLabwareId(i_seqMIDIStartingPosition);
            l_strLabwareIDDestination = SeqGetLabwareId(i_seqMIDIDestinationPosition);
            l_strReturn = StrConcat4(Translate(" Please pickup the plate from "), l_strLabwareIDSource, Translate(" and move it to "), l_strLabwareIDDestination);
            l_strReturn = StrConcat2(l_strReturn, Translate(". Press OK to confirm manual USER intervention. Press CANCEL to abort the run."));
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Paddles had difficulties picking up the plate. "), l_strReturn);
            _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
            if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
            {
              l_blnManualTransportRequested = ASWGLOBAL::BOOL::TRUE;
            }
            else
            {
              MECC::TraceComment(Translate("USER abort the run due to an improper transport step"));
              _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
              abort;
            }
          }   /* end if from skip handler if no error */
        }
      }
      if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
      {
        MECC::TraceComment(Translate("USER confirmed to transport the plate manually"));
        l_strReturn = StrConcat2(Translate(" Press OK to confirm the proper execution of manual transport step. Press CANCEL to abort the run."), Translate(""));
        l_intReturnValueDialog = VectorCustomDialogs::ErrorDialog(Translate("Transport Error"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("Paddles had difficulties picking up the plate. "), l_strReturn);
        _DATA_TranslateVectorCustomDialogsErrorCodes(l_intReturnValueDialog);
        if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
        {
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually."), ASWGLOBAL::BOOL::TRUE);
        }
        else
        {
          _DATA_UpdateInformationIntoReportFile(Translate("Gripper had difficulties to transport the labware - User intervention requested to transport the labware manually. Abort requested."), ASWGLOBAL::BOOL::TRUE);
          abort;
        }
      }
    }
    if (l_blnManualTransportRequested == ASWGLOBAL::BOOL::FALSE)
    {
      o_strReadCurrentBarcode = Translate("");
      _DATA_AnalyzeStepReturnValueOfTransportStepAndWriteToReport(l_strStepReturnValueQCGGetPlate, l_strStepReturnValueQCGPlacePlate, i_intTransportTool, o_strReadCurrentBarcode);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strLibraryName, l_strComment);
    t_strFunctionName = Translate("");
    return (ASWGLOBAL::BOOL::TRUE);
  }
} // library namespace
