 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\10x Genomics\\Chromium GEM-X Single Cell\\Library\\InhecoTEC_Controller.hs_" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "VectorCustomDialogs\\VectorCustomDialogs.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\10x Genomics\\Chromium GEM-X Single Cell\\Library\\LiquidWaste_Controller.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\10x Genomics\\Chromium GEM-X Single Cell\\Library\\InhecoODTC_Controller.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\10x Genomics\\Chromium GEM-X Single Cell\\Library\\LoadingDialog_Controller.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\10x Genomics\\Chromium GEM-X Single Cell\\Library\\LoadingDialog_Controller.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\10x Genomics\\Chromium GEM-X Single Cell\\Library\\Pipetting_Controller.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\10x Genomics\\Chromium GEM-X Single Cell\\Library\\Data_Controller.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\10x Genomics\\Chromium GEM-X Single Cell\\Library\\Transport_Controller.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\10x Genomics\\Chromium GEM-X Single Cell\\Library\\JSONRunReport.hs_" }
 namespace _Method { #include "VenusTextToSpeech\\VenusTextToSpeech.hs_" }
 namespace _Method { #include "Tip Management Library\\TipManagementLibrary.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\10x Genomics\\Chromium GEM-X Single Cell\\Library\\LoadCarrier_Controller.hs_" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "HSLTime\\HSLTime.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\10x Genomics\\Chromium GEM-X Single Cell\\Library\\NormalizationAndPooling_Controller.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\Hamilton\\NGSStarMOA\\10x Genomics\\Chromium GEM-X Single Cell\\Library\\HamiltonHeaterShaker_Controller.hs_" }
 namespace _Method { #include "HSLGetSerialNumber.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "SMTs\\EditODTCXML\\EditODTCXML.hs_" }
 namespace _Method { #include "HSLExtensions\\Array.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\Hamilton\\NGSStarMOA\\10x Genomics\\Chromium GEM-X Single Cell\\Library\\ReagentPlating_Controller.hs_" }
 namespace _Method { #include "Labware Properties\\Labware_Property_Query.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
 namespace _Method { #include "ArrayTools\\ArrayTools.hs_" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "Tip Management Library\\TipToolEnums.hsl" }
 namespace _Method { #include "HSLLabwrAccess\\HSLLabwrAccess.hsl" }
 namespace _Method { #include "HSLExtensions\\Venus.hsl" }
 namespace _Method { #include "HSLDevLib.hsl" }
 namespace _Method { #include "Library\\HSLMthLib.hsl" }
 namespace _Method { #include "HSLMlStarStepReturnLib.hsl" }
#include "C:\\Program Files (x86)\\Hamilton\\NGSStarMOA\\10x Genomics\\Chromium GEM-X Single Cell\\Methods\\Chromium GEM-X Single Cell_DECK_V0.0.2.res"
variable t_strTipCounterNameTip300;
variable t_str_PlatformUsed;
variable t_strTipCounterNameTip50;
variable t_str_KitTitle;
variable t_blnSkipLoadingRoutine;
variable t_str_KitSupplier;
variable t_strTipCounterNameTip1000;
variable t_blnSimulationMode;
variable t_blnTestODTCWithShortDummyProtocol;
variable t_strLocalIPAddressOfComputer;
variable t_strODTCFolderXML;
variable t_strODTCDirectory;
variable t_strDeviceAddressODTC;
variable t_strStatusHeader;
variable t_intDeviceNumberODTC;
variable t_strFullPathReportFile;
variable t_blnShortenPreheat;
variable t_intRequestIDForActiveProtocol;
variable t_intNumberOfSamplesFromFile;
variable t_intSelectedIndexSTOP;
variable t_intTimeForProtocol;
variable t_intSelectedIndexSTART;
variable t_arrBlnProcessActivation[];
variable t_arrIndex1PositionIDs[];
variable t_arrIndex2IDs[];
variable t_arrIndex1IDs[];
variable t_arrSamplePositionIDs[];
variable t_arrIndex2PositionIDs[];
sequence t_trpPCR_ODTC;
sequence t_trpPCR_Waste;
variable t_blnDeactivatePipettingSteps;
sequence arrStrSequences[];
variable intReturnValueSetup;
variable intReturnValueDialog;
variable arrIntRackTypes[];
variable t_blnActivateTextToSpeechFunction;
variable t_strSerialNumber;
variable t_blnSimulationModeODTCController;
variable t_blnSimulationModeLiquidWasteSystem;
variable t_blnSimulationModeTECController;
variable t_bln_ODTCHasBeenUsed;
variable t_arr_strTemplateIDs_All[];
variable t_arr_strTemplateIDs_ToLoad[];
variable t_arrStrTipCounterNames[];
sequence t_trpMIDI_Waste;
variable t_intDeviceID_CPAC01;
variable t_arrSamplePlatePositionIDs[];
sequence t_trpLid_Waste;
sequence t_trpPCR_Pipette03;
variable t_intRequiredNumberOf50uLTips_Total(0);
variable t_intRequiredNumberOf1000uLTips_Total(0);
variable t_intRequiredNumberOf300uLTips_Total(0);
variable t_strFunctionName;
variable t_strMethodName;
variable t_int_AutoloadParkTrack;
variable t_str_FullpathFile_RunData;
variable t_strFileInputWorklist;
variable t_blnExternalThermalcycling;
variable t_str_ConcatKitSupplierKitNamePlatform;
variable t_blnUseMPHInsteadOfChannels;
sequence t_trpMIDI_Waste_inverted;
sequence t_trpLid_ODTC_inverted;
sequence t_trpPCR_Pipette02;
sequence t_trpPCR_ODTC_inverted;
sequence t_seqPCR_Pipette02;
sequence t_seqMIDI_Magnet;
sequence t_seqSamplePlate_Pipette02;
sequence t_seqMIDI_Pipette03;
sequence t_trpMIDI_Pipette03;
sequence t_trpMIDI_MIDIStack01;
sequence t_trpMIDI_MIDIStack01_asc;
sequence t_trpLid_LidStack01;
sequence t_trpLid_LidStack01_asc;
sequence t_trpPCR_Waste_inverted;
sequence t_trpLid_Waste_inverted;
variable t_strMethodNameWithoutExtension;
variable t_blnODTCRequiredForProcess;
variable t_intNumberOfColumnsWithinOneBatch;
sequence t_seqMPH_LiquidWaste;
variable t_strKitDirectory;
variable l_str_ControllerNameAndVersion_LoadingDialogController;
sequence t_seq_LiquidWaste;
sequence t_arrSequenceBatchProcessingCleanUp[];
variable t_intNumberOfCalculatedBatchesToBeProcessed;
sequence t_trpPCR_HHS01;
sequence t_trpPCR_HHS02;
sequence t_trpMIDI_HHS04;
sequence t_trpMIDI_HHS05;
sequence t_trpPCR_Pipette01;
variable t_blnSimulationModeHHSController;
variable l_str_ControllerNameAndVersion_HHSController;
variable t_arrHHSDeviceNumber[];
sequence t_trpPCR_PCRStack01;
sequence t_trpPCR_PCRStack01_asc;
sequence t_trpLid_ODTC;
variable t_intNumberOfIntermediatePlateWells;
variable t_intRequiredNumberOf300uLTipsProcess01;
variable t_intRequiredNumberOf300uLTipsProcess02;
variable t_intRequiredNumberOf300uLTipsProcess03;
variable t_fltVolumeDeadOf2mLTube;
variable t_fltVolumeDeadOf5mLTube;
variable t_fltVolumeMaxOf2mLTube;
variable t_fltVolumeMaxOf5mLTube;
variable t_fltVolumeDeadOfDot5mLTube;
variable t_fltVolumeMaxOf10mLTube;
variable t_fltVolumeDeadOf10mLTube;
variable t_fltVolumeMaxOfIntermediatePlate;
variable t_fltVolumeMaxOfDot5mLTube;
variable t_strTubeName2mL;
variable t_strTubeName5mL;
variable t_strTubeName10mL;
variable t_strTubeNameDot5mL;
variable t_fltVolume_Sample;
sequence t_trpMIDI_HHS03;
sequence t_seqDWP_Pipette04;
variable t_fltVolumeDeadPercentOfLiquidTransfer;
variable t_fltVolumeDeadOf50mLTrough;
variable t_strTroughName50mL;
variable t_fltVolumeDeadOf20mLTrough;
variable t_strTroughName20mL;
variable t_fltVolumeMaxOf50mLTrough;
variable t_fltVolumeMaxOf20mLTrough;
variable t_fltVolumeDeadOfIntermediatePlate;
variable t_intNumberOfSouceTubes;
variable t_fltVolumeMaxOfDWP;
variable t_fltVolumeDeadOfDWP;
variable t_fltVolume_BufferEB_P2;
variable t_fltVolume_Supernatant_P4;
variable t_fltVolume_BufferEB_P4;
variable t_fltVolume_Mix_3_P2;
variable t_fltVolume_LibraryAmpMix;
variable t_fltVolume_FragmentationMix;
variable t_fltVolume_SPRI_2_P2;
variable t_fltVolume_Mix_2_P2;
variable t_fltVolume_BufferEB_P6;
variable t_fltVolume_SPRI_P4;
variable t_fltVolume_SPRI_1_P2;
variable t_fltVolume_Mix_1_P2;
variable t_fltVolume_Mix_2_P4;
variable t_fltVolume_EtOH_P2;
variable t_fltVolume_AdaptorLigationMix;
variable t_fltVolume_Supernatant_3_P2;
variable t_fltVolume_Mix_3_P6;
variable t_fltVolume_Mix_1_P4;
variable t_fltVolume_DualIndex;
variable t_fltVolume_Supernatant_2_P2;
variable t_fltVolume_SPRI_2_P6;
variable t_fltVolume_Mix_2_P6;
variable t_fltVolume_EtOH_P4;
variable t_fltVolume_Supernatant_1_P2;
variable t_fltVolume_SPRI_1_P6;
variable t_fltVolume_Mix_1_P6;
variable t_fltVolume_EtOH_P6;
variable t_intRequiredNumberOf300uLTipsProcess04;
variable t_fltVolume_Supernatant_3_P6;
variable t_intRequiredNumberOf300uLTipsProcess05;
variable t_fltVolume_Supernatant_2_P6;
variable t_intRequiredNumberOf300uLTipsProcess06;
variable t_fltVolume_Supernatant_1_P6;
variable t_fltVolume_BufferEB_FragmentationMix;
sequence t_seqProcessChannels_LibraryAmpMix;
sequence t_seqIntermediateDispense_BufferEB;
sequence t_seqIntermediateAspirateChannels_SPRIselect;
sequence t_seqBufferEB_FragmentationMix;
sequence t_seqLibraryAmpMix;
sequence t_seqProcessMPH_LibraryAmpMix;
sequence t_seqProcessMPH_BufferEB;
sequence t_seqIntermediateDispense_SPRIselect;
sequence t_seqIntermediateDispense_LibraryAmpMix;
sequence t_seqIntermediateAspirateMPH_LibraryAmpMix;
sequence t_seqIntermediateAspirateMPH_BufferEB;
sequence t_seqIntermediateAspirateMPH_SPRIselect;
sequence t_seqSPRIselect;
sequence t_seqProcessChannels_BufferEB;
sequence t_seqIntermediateAspirateChannels_LibraryAmpMix;
sequence t_seqIntermediateAspirateChannels_BufferEB;
sequence t_trpMIDI_CPAC02;
sequence t_seqIntermediateAspirateChannels_FragmentationMix;
sequence t_seqIntermediateDispense_FragmentationMix;
sequence t_seqProcessMPH_FragmentationMix;
sequence t_seqIntermediateAspirateMPH_FragmentationMix;
sequence t_seqProcessChannels_FragmentationMix;
variable t_fltVolumeSPRIselectTracking;
sequence t_seqProcessChannels_SPRIselectPCR01;
sequence t_seqProcessChannels_SPRIselectPCR02;
sequence t_seqProcessMPH_SPRIselectPCR01;
sequence t_seqProcessMPH_SPRIselectPCR02;
sequence t_trpPCR_Magnet;
sequence t_seqProcessMPH_EtOH;
sequence t_seqIntermediateAspirateChannels_EtOH;
sequence t_seqIntermediateAspirateMPH_EtOH;
sequence t_seqIntermediateDispense_EtOH;
sequence t_seqProcessChannels_EtOH;
sequence t_seqPCR_Pipette01;
sequence t_seqPCR_Magnet;
variable t_blnIndexplateLoaded;
variable t_blnIndexPlateSecured;
variable t_blnSPRIselectAndBufferEBplated;
sequence t_seqIntermediateAspirateChannels_AdaptorLigationMix;
sequence t_seqIntermediateDispense_AdaptorLigationMix;
sequence t_seqIntermediateAspirateMPH_AdaptorLigationMix;
sequence t_seqProcessMPH_AdaptorLigationMix;
sequence t_seqProcessChannels_AdaptorLigationMix;
sequence t_seqIndexPlate;
variable t_intDeviceID_CPAC02;
variable t_arrODTCProtocols[];
variable t_intIndexODTCMethod;
variable l_hdlSetupTipSupportBlock;
variable l_hdlSelectProcesses;
variable t_strTraceTag;
variable t_strPCRCycles;
variable t_intNumberOfConsumedTips;
variable t_strPCRCyclesTrace;
variable t_fltVolume_FragmentationBuffer;
variable t_fltVolume_FragmentationEnzyme;
variable t_fltVolume_DNAligase;
variable t_fltVolume_LigationMix;
sequence t_seqDNAligase;
sequence t_seqFragmentationBuffer;
sequence t_seqLigationMix;
sequence t_seqFragmentationEnzyme;
sequence t_seqBufferEB;
variable t_arr_fltVolumeSource_SPRIselect[];
variable t_arr_fltVolumeTarget_BufferEB_MM[];
variable t_arr_fltVolumeTarget_LigationMix[];
variable t_arr_fltVolumeTarget_BufferEB[];
variable t_arr_fltVolumeSource_FragmentationBuffer[];
variable t_arr_fltVolumeSource_DNAligase[];
variable t_arr_fltVolumeSource_FragmentationEnzyme[];
variable t_arr_fltVolumeSource_BufferEB_MM[];
variable t_arr_fltVolumeTarget_SPRIselect[];
variable t_arr_fltVolumeTarget_DNAligase[];
variable t_arr_fltVolumeSource_LigationMix[];
variable t_arr_fltVolumeSource_LibraryAmpMix[];
variable t_arr_fltVolumeTarget_LibraryAmpMix[];
variable t_arr_fltVolumeTarget_FragmentationBuffer[];
variable t_arr_fltVolumeSource_BufferEB[];
variable t_arr_fltVolumeTarget_FragmentationEnzyme[];
variable t_fltVolumeTracking;
variable t_arr_fltVolumeTubes_SPRIselect[];
variable t_arr_intTipsRequired[];
variable t_intDeviceID_CPAC03;
sequence t_trpMIDI_CPAC03;
sequence t_seqIntermediateDispense_FragmentationMix_Create;
sequence t_seqIntermediateDispense_LibraryAmpMix_Create;
sequence t_seqIntermediateDispense_AdaptorLigationMix_Create;
variable t_blnUseShortTimers;
global device ML_STAR ("C:\\Program Files (x86)\\Hamilton\\NGSStarMOA\\10x Genomics\\Chromium GEM-X Single Cell\\Methods\\Chromium GEM-X Single Cell_DECK_V0.0.2.lay", "ML_STAR", hslTrue);
variable t_flt_Z_Magnet;
variable t_flt_X_Magnet;
variable t_flt_Y_Magnet;
sequence t_seqSPRItrough;
variable t_strStartTime;
variable t_strEndTime;
variable t_fltProcessTime;
variable t_fltVolumeDeadOfSPRIselectPlate;
variable t_blnMasterMixPlated;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "templates\\HSLPipetteWizard.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method { #include "HSLSchedCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable l_int_OptionSelected;
    private variable l_str_ControllerNameAndVersion_TECController;
    private variable l_str_ControllerNameAndVersion_LiquidWasteController;
    private variable l_str_ControllerNameAndVersion_DataController;
    private variable l_strMethodNameAndVersion;
    private variable l_str_ControllerNameAndVersion_NormalizationAndPoolingController;
    private variable l_str_ControllerNameAndVersion_ODTCController;
    private variable l_strNameAndVersion_PipettingController;
    private variable l_str_ControllerNameAndVersion_LoadCarrierController;
    private variable l_str_ControllerNameAndVersion_TransportController;
    private variable l_blnUseSPRICPAC;
    private variable l_blnUseMasterMixCPAC;
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    INHECOTEC_CONTROLLER::_InitLibrary();
    LIQUIDWASTE_CONTROLLER::_InitLibrary();
    INHECOODTC_CONTROLLER::_InitLibrary();
    LOADINGDIALOG_CONTROLLER::_InitLibrary();
    PIPETTING_CONTROLLER::_InitLibrary();
    DATA_CONTROLLER::_InitLibrary();
    TRANSPORT_CONTROLLER::_InitLibrary();
    JSONRUNREPORT::_InitLibrary();
    VENUSTEXTTOSPEECH::_InitLibrary();
    TIPMANAGEMENTLIBRARY::_InitLibrary();
    LOADCARRIER_CONTROLLER::_InitLibrary();
    NORMALIZATIONANDPOOLING_CONTROLLER::_InitLibrary();
    HAMILTONHEATERSHAKER_CONTROLLER::_InitLibrary();
    EDITODTCXML::_InitLibrary();
    REAGENTPLATING_CONTROLLER::_InitLibrary();
    LPQ::_InitLibrary();
    ARRAYTOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  10x Genomics GEM-X Single Cell 3',5'\nBy:         Brannon Orr of Hamilton Reno\nVersion:  0.3.7\n*************************************************************************************************************************************"));
    t_strTraceTag = Translate("*^*^*^*^*^*^*^*^*^*^*^*^*^*^*^*^*^*^*^*^");
    LPQ::LABWARE_GetCurrentPosition(ML_STAR, ML_STAR.PCR_Magnet, t_flt_X_Magnet, t_flt_Y_Magnet, t_flt_Z_Magnet);
    t_bln_ODTCHasBeenUsed = ASWGLOBAL::BOOL::FALSE;
    t_blnODTCRequiredForProcess = ASWGLOBAL::BOOL::FALSE;
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
    t_blnSimulationMode = Util::GetSimulationMode();
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Simulation mode of connected liquid handler: "), t_blnSimulationMode);
    t_strSerialNumber = GetSerialNumber(ML_STAR);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Serial number of platform : "), t_strSerialNumber);
    t_blnActivateTextToSpeechFunction = ASWGLOBAL::BOOL::FALSE;
    t_blnDeactivatePipettingSteps = ASWGLOBAL::BOOL::FALSE;
    t_blnSkipLoadingRoutine = ASWGLOBAL::BOOL::TRUE;
    t_blnUseShortTimers = ASWGLOBAL::BOOL::FALSE;
    t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::TRUE;
    t_intNumberOfColumnsWithinOneBatch = 12;
    t_blnExternalThermalcycling = ASWGLOBAL::BOOL::FALSE;
    t_blnTestODTCWithShortDummyProtocol = ASWGLOBAL::BOOL::FALSE;
    t_blnSimulationModeLiquidWasteSystem = ASWGLOBAL::BOOL::TRUE;
    t_blnSimulationModeTECController = ASWGLOBAL::BOOL::FALSE;
    t_blnSimulationModeHHSController = ASWGLOBAL::BOOL::FALSE;
    t_blnSimulationModeODTCController = ASWGLOBAL::BOOL::FALSE;
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("Simulation mode of all 3rd party devices: "), Translate("---"), Translate(""), Translate(""), Translate(". Liquid waste system: "), t_blnSimulationModeLiquidWasteSystem, Translate(". TEC controller: "), t_blnSimulationModeTECController, Translate(". ODTC controller: "), t_blnSimulationModeODTCController);
    DATA_CONTROLLER::Init(ML_STAR, t_blnUseShortTimers, t_strFullPathReportFile, l_str_ControllerNameAndVersion_DataController, t_str_PlatformUsed, t_str_KitSupplier, t_str_KitTitle, t_strMethodName, t_strKitDirectory);
    t_strMethodNameWithoutExtension = HSLExtensions::File::GetFileNameWithoutExtension(t_strMethodName);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("------------------------------- Method Name: "), t_strMethodNameWithoutExtension);
    t_str_ConcatKitSupplierKitNamePlatform = StrConcat12(t_str_KitSupplier, Translate(" - "), t_str_KitTitle, Translate(" for "), t_str_PlatformUsed, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("------------------------------- "), t_str_ConcatKitSupplierKitNamePlatform);
    t_strFunctionName = Translate("");
    t_int_AutoloadParkTrack = 54;
    t_intDeviceID_CPAC01 = 1;
    t_intDeviceID_CPAC02 = 4;
    t_intDeviceID_CPAC03 = 2;
    t_strDeviceAddressODTC = "192.168.88.254";
    t_strLocalIPAddressOfComputer = "192.168.88.1";
    JSONRUNREPORT::Add_System(ML_STAR, ASWGLOBAL::BOOL::TRUE, t_str_PlatformUsed, t_str_KitSupplier, t_str_KitTitle);
    DATA_CONTROLLER::Reportfile_UpdateData(l_strMethodNameAndVersion, ASWGLOBAL::BOOL::FALSE);
    VENUSTEXTTOSPEECH::Init(t_blnActivateTextToSpeechFunction);
    VENUSTEXTTOSPEECH::Run(Translate("Initializing Platform including all devices"));
    VectorCustomDialogs::Initialize();
    t_strStatusHeader = StrConcat4(Translate(""), t_str_KitSupplier, Translate(" - "), t_str_KitTitle);
    VectorCustomDialogs::ShowStatusDialog(t_strStatusHeader);
    VectorCustomDialogs::SetStatusText(Translate("________________ Run Preparation ________________"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    DATA_CONTROLLER::Reportfile_UpdateData(Translate(" ________________ Initialization  ________________"), ASWGLOBAL::BOOL::FALSE);
    LOADINGDIALOG_CONTROLLER::Init(ML_STAR, t_strKitDirectory, t_strMethodNameWithoutExtension, l_str_ControllerNameAndVersion_LoadingDialogController, t_str_FullpathFile_RunData);
    DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Setup TipCounters"), ASWGLOBAL::BOOL::TRUE);
    TIPMANAGEMENTLIBRARY::Logging_StartLogging(Translate("C:\\Program Files (x86)\\HAMILTON\\LogFiles"), Translate("TipManagementLog"));
    TIPMANAGEMENTLIBRARY::Initialize_InitializeDevice(ML_STAR, ML_STAR.CORE_Gripper, 8, ML_STAR.Channels_Waste);
    t_strTipCounterNameTip50 = "50µl filtered tips";
    t_strTipCounterNameTip300 = Translate("300µl filtered tips");
    t_strTipCounterNameTip1000 = Translate("1000µl filtered tips");
    arrStrSequences.SetSize(0);
    arrStrSequences.AddAsLast(ML_STAR.MlStar50ulTipWithFilter);
    arrStrSequences.AddAsLast(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    arrStrSequences.AddAsLast(ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    t_arrStrTipCounterNames.SetSize(0);
    t_arrStrTipCounterNames.AddAsLast(t_strTipCounterNameTip50);
    t_arrStrTipCounterNames.AddAsLast(t_strTipCounterNameTip300);
    t_arrStrTipCounterNames.AddAsLast(t_strTipCounterNameTip1000);
    arrIntRackTypes.SetSize(0);
    arrIntRackTypes.AddAsLast(TIP_TOOLS::RackType::Standard);
    arrIntRackTypes.AddAsLast(TIP_TOOLS::RackType::Standard);
    arrIntRackTypes.AddAsLast(TIP_TOOLS::RackType::Standard);
    intReturnValueSetup = TIPMANAGEMENTLIBRARY::Initialize_SetupTipCounters(ML_STAR, arrStrSequences, t_arrStrTipCounterNames, arrIntRackTypes);
    if (intReturnValueSetup != TIP_TOOLS::ReturnCode::NoError)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("intReturnValueSetup: "), intReturnValueSetup);
      abort;
    }
    LOADCARRIER_CONTROLLER::Init(ML_STAR, t_strFullPathReportFile, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, t_int_AutoloadParkTrack, l_str_ControllerNameAndVersion_LoadCarrierController);
    PIPETTING_CONTROLLER::Init(ML_STAR, t_blnDeactivatePipettingSteps, t_strFullPathReportFile, ML_STAR.Channels_Waste, TIP_TOOLS::MphPickUpSide::TipPickUpWithLeftSideOfMph, ASWGLOBAL::BOOL::TRUE, l_strNameAndVersion_PipettingController);
    TRANSPORT_CONTROLLER::Init(ML_STAR.CORE_Gripper, t_strFullPathReportFile, ML_STAR, l_str_ControllerNameAndVersion_TransportController);
    NORMALIZATIONANDPOOLING_CONTROLLER::Init(ML_STAR, t_strMethodNameWithoutExtension, ASWGLOBAL::BOOL::TRUE, l_str_ControllerNameAndVersion_NormalizationAndPoolingController);
    DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Initialize TEC Controller"), ASWGLOBAL::BOOL::TRUE);
    INHECOTEC_CONTROLLER::Init(t_blnSimulationModeTECController, ASWGLOBAL::BOOL::TRUE, l_str_ControllerNameAndVersion_TECController);
    DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Initialize Hamilton Heater Shakers"), ASWGLOBAL::BOOL::TRUE);
    HAMILTONHEATERSHAKER_CONTROLLER::Init(t_blnSimulationModeHHSController, ML_STAR, 1, 1, 1, ASWGLOBAL::BOOL::TRUE, t_arrHHSDeviceNumber, l_str_ControllerNameAndVersion_HHSController);
    DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Cool Inheco CPAC - PCR adapter to 10°C"), ASWGLOBAL::BOOL::TRUE);
    DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Initialize Liquid Waste"), ASWGLOBAL::BOOL::TRUE);
    LIQUIDWASTE_CONTROLLER::Init(ML_STAR, t_blnSimulationModeLiquidWasteSystem, 0, ASWGLOBAL::BOOL::TRUE, l_str_ControllerNameAndVersion_LiquidWasteController);
    DATA_CONTROLLER::Reportfile_UpdateData(Translate("------------------------  Select Processes"), ASWGLOBAL::BOOL::TRUE);
    l_hdlSelectProcesses = 0;
    l_hdlSetupTipSupportBlock = 0;
    l_hdlSelectProcesses      = Fork("_SelectProcesses");
    l_hdlSetupTipSupportBlock = Fork("_SetupTipSupportBlock");
    Join(l_hdlSelectProcesses, hslInfinite);
    Join(l_hdlSetupTipSupportBlock, hslInfinite);
    l_blnUseMasterMixCPAC = ASWGLOBAL::BOOL::FALSE;
    l_blnUseSPRICPAC = ASWGLOBAL::BOOL::FALSE;
    {
      //Retrieve requirement for Master Mix CPAC devices
      if(t_arrBlnProcessActivation.GetAt(0) == ASWGLOBAL::BOOL::TRUE || t_arrBlnProcessActivation.GetAt(2) == ASWGLOBAL::BOOL::TRUE || t_arrBlnProcessActivation.GetAt(4) == ASWGLOBAL::BOOL::TRUE) l_blnUseMasterMixCPAC = ASWGLOBAL::BOOL::TRUE;
      //Retrieve requirement for SPRI CPAC device
      if(t_arrBlnProcessActivation.GetAt(1) == ASWGLOBAL::BOOL::TRUE || t_arrBlnProcessActivation.GetAt(3) == ASWGLOBAL::BOOL::TRUE || t_arrBlnProcessActivation.GetAt(5) == ASWGLOBAL::BOOL::TRUE) l_blnUseSPRICPAC = ASWGLOBAL::BOOL::TRUE;
    }
    if (l_blnUseMasterMixCPAC == ASWGLOBAL::BOOL::TRUE)
    {
      INHECOTEC_CONTROLLER::TEC_SetTemperature(10, t_intDeviceID_CPAC01);
      INHECOTEC_CONTROLLER::TEC_SetTemperature(10, t_intDeviceID_CPAC02);
    }
    if (l_blnUseSPRICPAC == ASWGLOBAL::BOOL::TRUE)
    {
      INHECOTEC_CONTROLLER::TEC_SetTemperature(20, t_intDeviceID_CPAC03);
    }
    t_intIndexODTCMethod = 0;
    if (t_blnExternalThermalcycling == ASWGLOBAL::BOOL::FALSE)
    {
      t_strODTCDirectory = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("ODTC_scripts"), Translate("\\"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      t_strODTCFolderXML = StrConcat2(t_strODTCDirectory, Translate("Chromium GEM-X Single Cell_ODTCProtocols.xml"));
      t_arrODTCProtocols.SetSize(0);
      if (t_blnTestODTCWithShortDummyProtocol == ASWGLOBAL::BOOL::TRUE)
      {
        if (t_blnSimulationMode == ASWGLOBAL::BOOL::FALSE)
        {
          LOADINGDIALOG_CONTROLLER::DisplayDialog_Warning(Translate("Short dummy protocols are enabled for ODTC scripts.\n\nDo not perform any biological runs under these settings!"), Translate(""), 0, Translate(""), 0);
        }
        t_arrODTCProtocols.AddAsLast(Translate("10x_GEMX_AdaptorLigation_Init"));
        t_arrODTCProtocols.AddAsLast(Translate("10x_GEMX_AdaptorLigation_Init"));
        t_arrODTCProtocols.AddAsLast(Translate("10x_GEMX_AdaptorLigation_Init"));
        t_arrODTCProtocols.AddAsLast(Translate("10x_GEMX_AdaptorLigation_Init"));
        t_arrODTCProtocols.AddAsLast(Translate("10x_GEMX_AdaptorLigation_Init"));
        t_arrODTCProtocols.AddAsLast(Translate("10x_GEMX_AdaptorLigation_Init"));
        t_blnShortenPreheat = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        t_arrODTCProtocols.AddAsLast(Translate("10x_GEMX_FragERAT_Init"));
        t_arrODTCProtocols.AddAsLast(Translate("10x_GEMX_FragERAT"));
        t_arrODTCProtocols.AddAsLast(Translate("10x_GEMX_AdaptorLigation_Init"));
        t_arrODTCProtocols.AddAsLast(Translate("10x_GEMX_AdaptorLigation"));
        t_arrODTCProtocols.AddAsLast(Translate("10x_GEMX_PCR_Init"));
        t_arrODTCProtocols.AddAsLast(Translate("10x_GEMX_PCR"));
        t_blnShortenPreheat = ASWGLOBAL::BOOL::FALSE;
      }
      if (t_blnODTCRequiredForProcess == ASWGLOBAL::BOOL::TRUE)
      {
        DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Initialize ODTC"), ASWGLOBAL::BOOL::TRUE);
        INHECOODTC_CONTROLLER::Init(t_strDeviceAddressODTC, t_intDeviceNumberODTC, t_strLocalIPAddressOfComputer, t_blnSimulationModeODTCController, ASWGLOBAL::BOOL::TRUE, l_str_ControllerNameAndVersion_ODTCController);
        DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Preheat ODTC"), ASWGLOBAL::BOOL::TRUE);
        if (t_arrBlnProcessActivation.ElementAt( 5 -1) == 1)
        {
          TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" User selected to run "), t_strPCRCyclesTrace, Translate(" in PCR. "), Translate("Updating file: "), t_strODTCFolderXML, Translate("; Updating method: "), Translate("10x_GEMX_PCR"), Translate(" "), t_strTraceTag);
          EDITODTCXML::DATA_EditXMLFile(t_strODTCFolderXML, Translate("10x_GEMX_PCR"), 5, Translate("LoopNumber"), t_strPCRCycles);
        }
        INHECOODTC_CONTROLLER::ODTC_DownloadProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML);
        INHECOODTC_CONTROLLER::ODTC_CloseDoor(t_intDeviceNumberODTC);
        if (t_arrBlnProcessActivation.ElementAt( 1 -1) == 1)
        {
          t_intIndexODTCMethod = 1;
          INHECOODTC_CONTROLLER::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, t_arrODTCProtocols.ElementAt( t_intIndexODTCMethod -1), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
        }
        else
        {
          if (t_arrBlnProcessActivation.ElementAt( 3 -1) == 1)
          {
            t_intIndexODTCMethod = 3;
            INHECOODTC_CONTROLLER::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, t_arrODTCProtocols.ElementAt( t_intIndexODTCMethod -1), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
          }
          else
          {
            if (t_arrBlnProcessActivation.ElementAt( 5 -1) == 1)
            {
              t_intIndexODTCMethod = 5;
              INHECOODTC_CONTROLLER::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, t_arrODTCProtocols.ElementAt( t_intIndexODTCMethod -1), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
            }
          }
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(" -------------------------------------------------------- "), Translate("NGS Framework Controller Names and Versions: -------------------------------------------------------- "));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Data Controller: "), l_str_ControllerNameAndVersion_DataController);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("LiquidWaste Controller: "), l_str_ControllerNameAndVersion_LiquidWasteController);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("LoadCarrier Controller: "), l_str_ControllerNameAndVersion_LoadCarrierController);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("LoadingDialog Controller: "), l_str_ControllerNameAndVersion_LoadingDialogController);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("NormalizationAndPooling Controller: "), l_str_ControllerNameAndVersion_NormalizationAndPoolingController);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("ODTC Controller: "), l_str_ControllerNameAndVersion_ODTCController);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("TEC Controller: "), l_str_ControllerNameAndVersion_TECController);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Transport Controller: "), l_str_ControllerNameAndVersion_TransportController);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(" ------------------------------------------------------------------------------------------------------------------- "), Translate(""));
    DATA_CONTROLLER::Reportfile_UpdateData(Translate("------------------------ Calculate and Load Consumables"), ASWGLOBAL::BOOL::TRUE);
    _CalculateAndLoadConsumables();
    if (t_blnDeactivatePipettingSteps == ASWGLOBAL::BOOL::TRUE)
    {
      if (t_blnSimulationMode == ASWGLOBAL::BOOL::FALSE)
      {
        LOADINGDIALOG_CONTROLLER::DisplayDialog_Information(Translate("TEST - TRANSPORTS ONLY   - Pipetting steps are deactivated..."), Translate(""), 0, Translate(""), 0);
      }
    }
    HSLTime::GetUnixTimeNow(t_strStartTime);
    VENUSTEXTTOSPEECH::Run(Translate("Performing selected processes"));
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process01_FragERAT();
    }
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process02_PostFragSPRIselection();
    }
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process03_AdaptorLigation();
    }
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process04_PostLigationCleanup();
    }
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process05_SampleIndexPCR();
    }
    if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process06_PostIndexSPRIselection();
    }
    VectorCustomDialogs::SetStatusText(Translate("________________ Method Completed ________________"));
    HSLTime::GetUnixTimeNow(t_strEndTime);
    HSLTime::GetUnixTimespan(t_strStartTime, t_strEndTime, Translate("S"), t_fltProcessTime);
    ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    if (t_blnIndexPlateSecured == ASWGLOBAL::BOOL::TRUE)
    {
      TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_HHS01, t_trpPCR_Pipette01, ASWGLOBAL::BOOL::FALSE, 4, 2);
    }
    if (t_blnSPRIselectAndBufferEBplated == ASWGLOBAL::BOOL::TRUE)
    {
      TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_HHS05, t_trpMIDI_Waste, ASWGLOBAL::BOOL::FALSE, 4, 2);
    }
    if (t_blnMasterMixPlated == ASWGLOBAL::BOOL::TRUE)
    {
      TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_CPAC02, t_trpMIDI_Waste, ASWGLOBAL::BOOL::FALSE, 4, 2);
    }
    if (t_blnSPRIselectAndBufferEBplated == ASWGLOBAL::BOOL::TRUE)
    {
      TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_CPAC03, t_trpMIDI_Waste, ASWGLOBAL::BOOL::TRUE, 4, 2);
    }
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      PIPETTING_CONTROLLER::PIP_MPH_CleanUpTipSupport(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    }
    LOADINGDIALOG_CONTROLLER::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to unload all carriers?"), Translate("No"), ASWGLOBAL::BOOL::TRUE);
    LOADINGDIALOG_CONTROLLER::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to unload all carriers?"), Translate("Yes"), ASWGLOBAL::BOOL::FALSE);
    LOADINGDIALOG_CONTROLLER::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to defragment the tip racks?"), Translate("No"), ASWGLOBAL::BOOL::TRUE);
    LOADINGDIALOG_CONTROLLER::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to defragment the tip racks?"), Translate("Yes"), ASWGLOBAL::BOOL::FALSE);
    LOADINGDIALOG_CONTROLLER::MultipleChoiceDialog_DisplayDialog(5);
    LOADINGDIALOG_CONTROLLER::MultipleChoiceDialog_RetrieveUserSelection(5, Translate("Do you want to defragment the tip racks?"), l_int_OptionSelected);
    if (l_int_OptionSelected == 2)
    {
      DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Defragment tip racks"), ASWGLOBAL::BOOL::TRUE);
      PIPETTING_CONTROLLER::PIP_Channels_DefragmentTipRacks(ML_STAR, Translate(""));
    }
    LOADINGDIALOG_CONTROLLER::MultipleChoiceDialog_RetrieveUserSelection(5, Translate("Do you want to unload all carriers?"), l_int_OptionSelected);
    if (l_int_OptionSelected == 2)
    {
      DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Unload all carriers"), ASWGLOBAL::BOOL::TRUE);
      LOADCARRIER_CONTROLLER::UnloadAllCarriers(ML_STAR);
    }
    else
    {
      LOADCARRIER_CONTROLLER::UnloadCarrierByCarrierID(ML_STAR, Translate("Processing_Carrier"));
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    VENUSTEXTTOSPEECH::Run(Translate("Preparing for run shutdown"));
    DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Shut down all devices"), ASWGLOBAL::BOOL::TRUE);
    HAMILTONHEATERSHAKER_CONTROLLER::HHS_Terminate();
    INHECOTEC_CONTROLLER::TEC_Terminate();
    if (t_intIndexODTCMethod != 0)
    {
      INHECOODTC_CONTROLLER::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
      INHECOODTC_CONTROLLER::ODTC_Terminate(t_intDeviceNumberODTC, ASWGLOBAL::BOOL::FALSE);
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    LOADINGDIALOG_CONTROLLER::DisplayDialog_Information(Translate("Method completed successfully."), Translate(""), 0, Translate(""), 0);
    JSONRUNREPORT::SaveAndReleaseJSON();
    TIPMANAGEMENTLIBRARY::Counter_GetNumberOfConsumedTips(t_strTipCounterNameTip300, t_intNumberOfConsumedTips);
    {
      variable h,m,s;
      t_fltProcessTime = MthCeiling(t_fltProcessTime);
      h = t_fltProcessTime / 3600;
      m = (t_fltProcessTime % 3600) / 60;
      s = (t_fltProcessTime % 3600) % 60;
      TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, " ", "Process time (HH:MM:SS): ", h, ":", m, ":", s, " ", t_strTraceTag);
      TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, " ", "Number of 300F Tips consumed: ", t_intNumberOfConsumedTips, "", t_strTraceTag, "", "", "", "");
    }
    TIPMANAGEMENTLIBRARY::Logging_StopLogging();
    VENUSTEXTTOSPEECH::Run(Translate("Method Completed"));
    VectorCustomDialogs::Terminate();
    INHECOTEC_CONTROLLER::_ExitLibrary();
    LIQUIDWASTE_CONTROLLER::_ExitLibrary();
    INHECOODTC_CONTROLLER::_ExitLibrary();
    LOADINGDIALOG_CONTROLLER::_ExitLibrary();
    PIPETTING_CONTROLLER::_ExitLibrary();
    DATA_CONTROLLER::_ExitLibrary();
    TRANSPORT_CONTROLLER::_ExitLibrary();
    JSONRUNREPORT::_ExitLibrary();
    VENUSTEXTTOSPEECH::_ExitLibrary();
    TIPMANAGEMENTLIBRARY::_ExitLibrary();
    LOADCARRIER_CONTROLLER::_ExitLibrary();
    NORMALIZATIONANDPOOLING_CONTROLLER::_ExitLibrary();
    HAMILTONHEATERSHAKER_CONTROLLER::_ExitLibrary();
    EDITODTCXML::_ExitLibrary();
    REAGENTPLATING_CONTROLLER::_ExitLibrary();
    LPQ::_ExitLibrary();
    ARRAYTOOLS::_ExitLibrary();
  } }
