private function Process01_FragERAT(  ) void ;
private function Process02_PostFragSPRIselection(  ) void ;
private function Process03_AdaptorLigation(  ) void ;
private function Process04_PostLigationCleanup(  ) void ;
private function Process05_SampleIndexPCR(  ) void ;
private function Process06_PostIndexSPRIselection(  ) void ;
private function Test(  ) void ;
private function _CalculateAndLoadConsumables(  ) void ;
private function _LoadVariableHelper(  ) void ;
private function _SelectProcesses(  ) void ;
private function _SetupTipSupportBlock(  ) void ;
private function _VersionHistory(  ) void ;
private function __ExternalThermalcycling( variable i_strCarrierName, variable i_strMessageExternalThermalCycling_1, variable i_strMessageExternalThermalCycling_2, variable i_strLoadingImagePath ) void ;
private function __ReviewORReloadStockOfTips( variable i_intNumberOfTip50_required, variable i_intNumberOfTip300_required, variable i_intNumberOfTip1000_required ) void ;
private function __RunODTCProtocol( variable i_strODTCProtocolName, variable i_intIncubationDuration, variable i_strDialogMessage ) void ;
private function __RunODTCProtocolAsync( sequence & i_seqPlateSource, sequence & i_seqLidSource, sequence & i_seqPlateODTC, sequence & i_seqLidODTC, sequence & i_seqPlateDestination, variable i_strODTCProtocolName, variable i_intIncubationDuration, variable i_strDialogMessage ) void ;
private function __WaitODTCProtocolAsync( sequence & i_seqPlateODTC, sequence & i_seqLidODTC, sequence & i_seqPlateDestination, sequence & i_seqLidDestination ) void ;
private function __WaitODTCProtocolAsync_NoTransport( variable i_strDialogMessage ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private variable l_strAbortMessage;
  private variable l_intCleanUpTipSupportBlockRequested;
  private variable l_strMethodNameWithoutExtension;
  DATA_CONTROLLER::Reportfile_UpdateData(Translate("ĿĿĿĿĿĿĿĿMETHOD ABORTEDĿĿĿĿĿĿĿĿ"), ASWGLOBAL::BOOL::FALSE);
  VectorCustomDialogs::SetStatusText(Translate("ĿĿĿĿĿĿĿĿMETHOD ABORTEDĿĿĿĿĿĿĿĿ"));
  VENUSTEXTTOSPEECH::Run(Translate("Method Aborted"));
  l_strMethodNameWithoutExtension = HSLExtensions::File::GetFileNameWithoutExtension(t_strMethodName);
  if (t_strFunctionName == "")
  {
    l_strAbortMessage = StrConcat12(Translate("An abort was detected in the method:\n\n"), l_strMethodNameWithoutExtension, Translate("\n\nin the main method tab"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  }
  else
  {
    l_strAbortMessage = StrConcat12(Translate("An abort was detected in the method:\n\n"), l_strMethodNameWithoutExtension, Translate("\n\nin the process:\n\n"), t_strFunctionName, Translate("\n\n"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  }
  VectorCustomDialogs::AppendStatusText(l_strAbortMessage);
  LOADINGDIALOG_CONTROLLER::DisplayDialog_Warning(l_strAbortMessage, Translate(""), 0, Translate(""), 0);
  if (t_blnSimulationMode == ASWGLOBAL::BOOL::FALSE)
  {
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      LOADINGDIALOG_CONTROLLER::DisplayDialog_Question(Translate("Are there still tips at the tip support block to be cleaned up? \nPress YES to cleanup tip support block.\nPress NO to bypass tip support cleanup.\nPressing CANCEL will abort the run."), Translate(""), l_intCleanUpTipSupportBlockRequested, Translate(""), 0);
      if (l_intCleanUpTipSupportBlockRequested == ASWGLOBAL::DIALOG::YES)
      {
        PIPETTING_CONTROLLER::PIP_MPH_CleanUpTipSupport(ML_STAR, ASWGLOBAL::BOOL::TRUE);
      }
      if (l_intCleanUpTipSupportBlockRequested == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
      }
    }
  }
  TIPMANAGEMENTLIBRARY::Logging_StopLogging();
  MECC::TraceComment(Translate("\n\n\nON ABORT STARTS TO SHUT DOWN DEVICES\n\n"));
  VectorCustomDialogs::Terminate();
  HAMILTONHEATERSHAKER_CONTROLLER::HHS_Terminate();
  INHECOODTC_CONTROLLER::ODTC_Terminate(t_intDeviceNumberODTC, ASWGLOBAL::BOOL::TRUE);
  INHECOTEC_CONTROLLER::TEC_Terminate();
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  JSONRUNREPORT::SaveAndReleaseJSON();
}

private function _VersionHistory(  ) void {
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nAdapted By: Linda Schweizer, Hamilton Bonaduz AG\nDate:     15-05-2024\nVersion:  0.0.0.12\n\nVersion Notes:\n1) New LoadingDialog Controller: Set new \"Show data in loading dialog\" parameter to TRUE for all reagents"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nAdapted By: Linda Schweizer, Hamilton Bonaduz AG\nDate:     25-04-2024\nVersion:  0.0.0.11\n\nVersion Notes:\n1) Wrong parameter in \"Initialize_InitializeDevice\" of the TipManagementLibrary: was using \"TIP_TOOLS::DeviceType::Star\" for \"i_intChannelNumberForGripper\" -> using channel 8 now instead\n2) added 2nd MIDIStack to deck layout"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nAdapted By: Linda Schweizer, Hamilton Bonaduz AG\nDate:     05-04-2024\nVersion:  0.0.0.10\n\nVersion Notes:\n1) added a message to the DisplayTip dialog to clarify tip loading\n2)  Added force cleanup of tip support at the beginning of the method"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nAdapted By: Linda Schweizer, Hamilton Bonaduz AG\nDate:     02-04-2024\nVersion:  0.0.0.8\n\nVersion Notes:\n1) t_blnShortenPreheat used for first preheat (in dummy mode, also the first preheat is shortened - no need to wait for the lid to reacht its temperature), both in the main method tab and for ProcessX\n   For all subsequent protocols, preheat can be shortened (_RunODTCProtocol ->Shorten preheat = True)\n2) New labware descriptions for shopping list aligned with PM\n    No PNs displayed, since they are different between US and Europe"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nAdapted By: Linda Schweizer, Hamilton Bonaduz AG\nDate:     March 2024\nVersion:  0.0.0.7\n\nVersion Notes:\nFirst release version for FW3 beta tests\n"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      February  28, 2022\nVersion:  1.0.0\n,\nVersion Notes:\n\n1) package created, new loading pictures integrated\n \n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:     May  11, 2023\nVersion:  1.0.4\n,\nVersion Notes:\n\n1) Trace level library used and replaced other kind of trace libraries\n2) Sorted toggles in preprocessing tab\n3) Inserted comments\n \n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:     March  27, 2023\nVersion:  1.0.3\n,\nVersion Notes:\n\n1) Process X: New : get a lid from stack position if process 1 has not been performed...\n \n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:     March  8, 2023\nVersion:  1.0.2\n,\nVersion Notes:\n\n1) removed naming of \"VoV\" in smts\n \n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      November  8, 2022\nVersion:  1.0.1\n,\nVersion Notes:\n\n1) removed IDL tools or VANTAGE lib commands adressing the loading tray\n \n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      February  14, 2022\nVersion:  0.3.1\n,\nVersion Notes:\n\n1.introduced a new function \"DATA_SwitchONOFF_SchedulingTips\" to activate or deactivate the scheduling of tips. Deactivation is needed if you would like to pipette in bathces and try to avoid counting the same tip consuption multiple times\n \n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      January  21, 2022\nVersion:  0.3\n,\nVersion Notes:\n\n1.exchanged VoVPlatformController with independent pipetting, transport and data controller\n2. Method written to be used for Vantage systems using MPH\n \n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      November  10, 2021\nVersion:  0.2\n,\nVersion Notes:\n\n1. Included a new veriosn of ODTC controller v 0.2 offering a command to retrieve the last data fo perfomred thermalcycling step\n2. Included a new version of platform controller v 0.2 offering new mixing steps and pipette double transfer steps\n3. cleaned the code deleting dedundant commands (clean up tip adapter, check tips for 4 channel systems, defrag tips, pictures of groupings for preprocessing, processing, postprocessing\n\n \n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Example LibraryPrepKit\nBy:          Stephan Grosch, Hamilton Bonaduz AG, Ch\nDate:      November  10, 2021\nVersion:  0.1\n,\n\n\nVersion Notes:\n\n1. Method created based on Nextera XT draft\n \n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  10x Genomics\nBy:         Brannon Orr of Hamilton Reno\nDate:      April 1, 2025\nVersion:  0.2.3\n\nVersion Notes:\n\n1. Including ReagentPlating_Controller\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  10x Genomics\nBy:         Brannon Orr of Hamilton Reno\nDate:      April 30, 2025\nVersion:  0.2.6\n\nVersion Notes:\n\n1. Update to included 3rd CPAC for SPRI plate.  New carrier labware\n2. Only using and initializing HHS01\n3. Including strategic defrag in parallel with ODTC activity\n4. Removing offset grip for transport to waste...not needed.  New plate waste coordinates\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  10x Genomics\nBy:         Brannon Orr of Hamilton Reno\nDate:      May 5, 2025\nVersion:  0.3.0\n\nVersion Notes:\n\n1. Update to MM preparation location\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  10x Genomics\nBy:         Brannon Orr of Hamilton Reno\nDate:      May 10, 2025\nVersion:  0.3.2\n\nVersion Notes:\n\n1. Repaired bug in Pipetting controller\n2. Adjusted Z base offet of CPAC plate positions\n3. Re-added sequence increment for lid stack\n4. Added timer toggle in Data controller\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  10x Genomics\nBy:         William Hutchen, Hamilton Company Reno\nDate:      2025-05-20\nVersion:  0.3.3\n\nVersion Notes:\n\n1. (517) disabled dry down timer to prevent over drying of beads (TESTING)\n2. (1102) disabled dry down timer to prevent over drying of beads (TESTING)\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  10x Genomics\nBy:         Brannon Orr of Hamilton Reno\nDate:      2025029\nVersion:  0.3.4\n\nVersion Notes:\n\n1. Disabled TADM for SPRI trough mix, SPRI plate out, and Buffer EB plate out LC as mitigation for PX error 84 (not enough memory for TADM measurement).  These LC result in very long wait time using Wait for TADM Upload step\n2. Placed Wait for TADM Upload steps during ODTC incubation as secondary mitigation for PX error 84 (not enough memory for TADM measurement).\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  10x Genomics\nBy:         Brannon Orr of Hamilton Reno\nDate:      20250531\nVersion:  0.3.6\n\nVersion Notes:\n\n1. Added conditional CPAC handling for init, temp control, and plate waste\n2. Allowed tip reload for high throughput sets\n3. Fixed logic for tip reload\n4. Added conditional to use 50 mL troughs if 20 mL troughs are insufficient\n5. Updated to use v2.1.0 of ATML\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  10x Genomics\nBy:         Brannon Orr of Hamilton Reno\nDate:      20250714\nVersion:  0.3.7\n\nVersion Notes:\n\n1. For export\n\n*************************************************************************************************************************************"));
}

private function _SelectProcesses(  ) void {
  private variable l_intIndexSettingsDoubleOrSingleIndexing;
  private variable l_strIndexLabwareFormat;
  private variable l_arr_strProcessID[];
  private variable l_arr_strProcessIDCombinations[];
  private variable l_arrStrSampleIDs[];
  private variable loopCounter1;
  private variable l_arr_intDeactivatedStartProcessID[];
  private variable l_arr_intDeactivatedStopProcessID[];
  private variable l_strFunctionName;
  l_strFunctionName = Translate("");
  l_strFunctionName = GetFunctionName();
  DATA_CONTROLLER::Start_Function(l_strFunctionName, ASWGLOBAL::BOOL::FALSE);
  {
    loopCounter1 = 0;
    while (1 == 1)
    {
      loopCounter1 = loopCounter1 + 1;
      LOADINGDIALOG_CONTROLLER::DisplayDialog_SelectInputWorklist(t_strFileInputWorklist, Translate(""), 0);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Selected input worklist: "), t_strFileInputWorklist);
      t_arrSamplePositionIDs.SetSize(0);
      t_arrIndex1PositionIDs.SetSize(0);
      t_arrIndex1IDs.SetSize(0);
      t_arrIndex2PositionIDs.SetSize(0);
      t_arrIndex2IDs.SetSize(0);
      DATA_CONTROLLER::Read_InputWorklist_ExcelOrCSVFormat(t_strFileInputWorklist, t_intNumberOfSamplesFromFile, l_intIndexSettingsDoubleOrSingleIndexing, t_arrIndex1PositionIDs, t_arrIndex1IDs, t_arrIndex2PositionIDs, t_arrIndex2IDs, t_arrSamplePlatePositionIDs, l_arrStrSampleIDs, l_strIndexLabwareFormat);
      DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.PCR_HHS01, t_arrIndex1PositionIDs, t_seqIndexPlate, 1);
      if (t_intNumberOfSamplesFromFile > 96)
      {
        LOADINGDIALOG_CONTROLLER::DisplayDialog_Warning(Translate("This method is designed for processing of a maximum of 96 samples.\n\nThe worklist you selected contains more than 96 samples.\n\nPlease revise your worklist and re-load it."), Translate(""), 0, Translate(""), 0);
      }
      else
      {
        break;
      }
    }
  }
  if (t_intNumberOfSamplesFromFile < 8)
  {
    t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::FALSE;
  }
  l_arr_strProcessID.SetSize(0);
  l_arr_strProcessID.AddAsLast(Translate("Process 01: GEX Fragmentation, End Repair, and A-tailing"));
  l_arr_strProcessID.AddAsLast(Translate("Process 02: GEX Post Fragmentation, End Repair, and A-tailing Double Sided - SPRIselect"));
  l_arr_strProcessID.AddAsLast(Translate("Process 03: GEX Adaptor Ligation"));
  l_arr_strProcessID.AddAsLast(Translate("Process 04: GEX Post Ligation Cleanup - SPRIselect"));
  l_arr_strProcessID.AddAsLast(Translate("Process 05: GEX Sample Index PCR"));
  l_arr_strProcessID.AddAsLast(Translate("Process 06: Post Sample Index PCR Double Sided Size Selection - SPRIselect"));
  l_arr_strProcessIDCombinations.SetSize(0);
  l_arr_strProcessIDCombinations.AddAsLast(Translate("1.2.3.4.5.6"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("2.3.4.5.6"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("3.4.5.6"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("4.5.6"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("5.6"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("6"));
  if(0){
    if (t_intNumberOfSamplesFromFile > 64)
    {
      l_arr_strProcessIDCombinations.SetSize(0);
      l_arr_strProcessIDCombinations.AddAsLast(Translate("1.2.3.4.5"));
      l_arr_strProcessIDCombinations.AddAsLast(Translate("2.3.4.5"));
      l_arr_strProcessIDCombinations.AddAsLast(Translate("3.4.5"));
      l_arr_strProcessIDCombinations.AddAsLast(Translate("4.5"));
      l_arr_strProcessIDCombinations.AddAsLast(Translate("5"));
      l_arr_strProcessIDCombinations.AddAsLast(Translate("6"));
    }
    else
    {
      l_arr_strProcessIDCombinations.SetSize(0);
      l_arr_strProcessIDCombinations.AddAsLast(Translate("1.2.3.4.5.6"));
      l_arr_strProcessIDCombinations.AddAsLast(Translate("2.3.4.5.6"));
      l_arr_strProcessIDCombinations.AddAsLast(Translate("3.4.5.6"));
      l_arr_strProcessIDCombinations.AddAsLast(Translate("4.5.6"));
      l_arr_strProcessIDCombinations.AddAsLast(Translate("5.6"));
      l_arr_strProcessIDCombinations.AddAsLast(Translate("6"));
    }
  }
  l_arr_intDeactivatedStartProcessID.SetSize(0);
  l_arr_intDeactivatedStopProcessID.SetSize(0);
  MECC::TraceComment(Translate("PROCESS DEFINITIONS - INPUT"));
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strProcessID:"), l_arr_strProcessID);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strProcessIDCombinations:"), l_arr_strProcessIDCombinations);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_intDeactivatedStartProcessID: "), l_arr_intDeactivatedStartProcessID);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_intDeactivatedStopProcessID: "), l_arr_intDeactivatedStopProcessID);
  LOADINGDIALOG_CONTROLLER::SelectProcesses_DisplayDialog(l_arr_strProcessID, l_arr_strProcessIDCombinations, l_arr_intDeactivatedStartProcessID, l_arr_intDeactivatedStopProcessID, t_intSelectedIndexSTART, t_intSelectedIndexSTOP, t_arrBlnProcessActivation);
  if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    MECC::TraceComment(Translate(" Select PCR cycles"));
    LOADINGDIALOG_CONTROLLER::DisplayDialog_DataInput(Translate(""), Translate("Select the desired number of PCR cycles, from 5 to 16"), Translate(""), Translate("Enter an integer value between min and max cycles"), 1, Translate("5|16"), t_strPCRCycles, Translate(""), 0);
    t_strPCRCyclesTrace = t_strPCRCycles;
    t_strPCRCycles = t_strPCRCycles - 1;
    t_strPCRCycles = StrIStr(t_strPCRCycles);
    t_strPCRCyclesTrace = StrIStr(t_strPCRCyclesTrace);
  }
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE|| t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE|| t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_blnODTCRequiredForProcess = ASWGLOBAL::BOOL::TRUE;
  }
  JSONRUNREPORT::Add_Run(t_intNumberOfSamplesFromFile, t_arrBlnProcessActivation);
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strMethodName, Translate(""));
}

private function _CalculateAndLoadConsumables(  ) void {
  private variable l_intNumberOfMIDIPlates;
  private variable l_strMessageLoadDNAInputPlate;
  private variable l_arrEmptyArrayForTransportSequences[];
  private variable l_blnCarrierRequired;
  private variable l_intIndexTemplateIDs_ToLoad;
  private variable l_strLoadingImagePath;
  private variable l_intNumberOfPCRPlates;
  private variable l_intNumberOfLids;
  private variable l_strCarrierToLoad;
  private variable l_intNumberOfUnitsLidStack01;
  private variable l_intNumberOfUnitsMIDIStack01;
  private variable l_strFunctionName;
  private variable l_arrStrTipCounterNames_Required[];
  private variable l_strMessageDisplayTipDialog;
  private variable l_intIndex;
  private variable l_intNumberOfTubes;
  private variable l_intSize;
  private variable l_arr_strTubeType32_1[];
  private variable l_arr_strVolumeTubes32_1[];
  private variable l_arr_strVolumeTubes24[];
  private variable l_arr_strReagentNameTubes32_1[];
  private variable l_arr_strTubeType24[];
  private variable l_arr_strReagentNameTubes24[];
  private variable l_int300TipBucket;
  private variable l_strBufferEB;
  private variable l_strSPRIselect;
  private variable l_strEtOH;
  private variable l_strBufferEBplate;
  private variable l_strSPRIselectPlate;
  private variable l_intNumberOfUnitsPCRStack01;
  private variable l_fltVolumeBufferEBtotal;
  private variable l_fltVolumeSPRItotal;
  private variable l_strEtOHdescription;
  private variable l_strBufferEBdescription;
  private variable l_fltVolumeEtOHtotal;
  private variable l_strUnit;
  private variable l_intMixByOverturnTips;
  private variable l_intBufferEBtips;
  private variable l_strReagentName;
  private variable l_intStartPointSource;
  private variable l_intPreparationTips;
  private variable l_intSPRItips;
  private variable l_strSPRIdescription;
  private variable l_fltFractionalComponent;
  private variable l_intStartPointTarget;
  private variable l_arr_strTubeType_DNAligase[];
  private variable l_arr_strVolume_DNAligase[];
  private variable l_arr_strTubeType_LibraryAmpMix[];
  private variable l_arr_strReagentNameTubesCPAC[];
  private variable l_arr_strVolume_LibraryAmpMix[];
  private variable l_arr_strTubeType_LigationMix[];
  private variable l_arr_strTubeType_FragmentationBuffer[];
  private variable l_arr_strTubeType_FragmentationEnzyme[];
  private variable l_arr_strReagentName_DNAligase[];
  private variable l_arr_strVolume_FragmentationBuffer[];
  private variable l_arr_strReagentName_LibraryAmpMix[];
  private variable l_arr_strVolume_LigationMix[];
  private variable l_arr_strVolume_FragmentationEnzyme[];
  private variable l_arr_strTubeTypeCPAC[];
  private variable l_arr_strReagentName_FragmentationBuffer[];
  private variable l_arr_strVolumeTubesCPAC[];
  private variable l_arr_strReagentName_LigationMix[];
  private variable l_arr_strReagentName_FragmentationEnzyme[];
  private variable l_arr_fltVolumeTubes_FragmentationBuffer[];
  private variable l_arr_intNumberOfReactionsPerTube_FragmentationBuffer[];
  private variable l_arr_fltVolumeTubes_FragmentationEnzyme[];
  private variable l_arr_intNumberOfReactionsPerTube_FragmentationEnzyme[];
  private variable l_arr_intNumberOfReactionsPerWell_FragmentationBuffer[];
  private variable l_arr_intNumberOfReactionsPerWell_FragmentationEnzyme[];
  private variable l_arr_intNumberOfReactionsPerTube_BufferEB_MM[];
  private variable l_arr_fltVolumeTubes_BufferEB_MM[];
  private variable l_arr_intNumberOfReactionsPerWell_BufferEB_MM[];
  private variable l_arr_intNumberOfReactionsPerTube_DNAligase[];
  private variable l_arr_fltVolumeTubes_DNAligase[];
  private variable l_arr_intNumberOfReactionsPerTube_LigationMix[];
  private variable l_arr_intNumberOfReactionsPerWell_DNAligase[];
  private variable l_arr_fltVolumeTubes_LigationMix[];
  private variable l_arr_intNumberOfReactionsPerWell_LigationMix[];
  private variable l_arr_intNumberOfReactionsPerTube_LibraryAmpMix[];
  private variable l_arr_fltVolumeTubes_LibraryAmpMix[];
  private variable l_arr_intNumberOfReactionsPerWell_LibraryAmpMix[];
  private variable l_arr_intNumberOfReactionsPerWell_BufferEB[];
  private variable l_arr_fltVolumeTubes_BufferEB[];
  private variable l_arr_intNumberOfReactionsPerTube_BufferEB[];
  private variable l_arr_intNumberOfReactionsPerTube_SPRIselect[];
  private variable l_arr_intNumberOfReactionsPerWell_SPRIselect[];
  private variable l_strSubLoadingImagePath;
  private sequence l_seqIntermediateAspirateMPH_SPRIselect;
  private sequence l_seqIntermediateDispense_SPRIselect;
  private sequence l_seqIntermediateAspirateChannels_SPRIselect;
  private sequence l_seqJunk01;
  private sequence l_seqJunk02;
  private sequence l_seqJunk03;
  private sequence l_seqJunk04;
  private variable l_blnUseLargeTroughs;
  private variable l_strLabwareID_1;
  private variable l_strLabwareID_2;
  l_strFunctionName = Translate("");
  l_strFunctionName = GetFunctionName();
  DATA_CONTROLLER::Start_Function(l_strFunctionName, ASWGLOBAL::BOOL::FALSE);
  DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Calculate Sequences"), ASWGLOBAL::BOOL::TRUE);
  _LoadVariableHelper();
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.PCR_Pipette02, t_arrSamplePlatePositionIDs, t_seqSamplePlate_Pipette02, 1);
  DATA_CONTROLLER::Sequence_ReformatToMatchNumberOfSamples(ML_STAR, ML_STAR.PCR_Pipette01, 1, t_intNumberOfSamplesFromFile, t_seqPCR_Pipette01);
  DATA_CONTROLLER::Sequence_ReformatToMatchNumberOfSamples(ML_STAR, ML_STAR.PCR_Pipette02, 1, t_intNumberOfSamplesFromFile, t_seqPCR_Pipette02);
  DATA_CONTROLLER::Sequence_ReformatToMatchNumberOfSamples(ML_STAR, ML_STAR.PCR_Magnet, 1, t_intNumberOfSamplesFromFile, t_seqPCR_Magnet);
  DATA_CONTROLLER::Sequence_ReformatToMatchNumberOfSamples(ML_STAR, ML_STAR.MIDI_Pipette03, 1, t_intNumberOfSamplesFromFile, t_seqMIDI_Pipette03);
  DATA_CONTROLLER::Sequence_ReformatToMatchNumberOfSamples(ML_STAR, ML_STAR.MPH_LiquidWaste, 1, 96, t_seqMPH_LiquidWaste);
  DATA_CONTROLLER::Sequence_ReformatToMatchNumberOfSamples(ML_STAR, ML_STAR.Channels_LiquidWaste, 1, t_intNumberOfSamplesFromFile, t_seq_LiquidWaste);
  DATA_CONTROLLER::Sequence_CalculateAndDefineBatchProcess(t_intNumberOfColumnsWithinOneBatch, t_seqMIDI_Magnet, t_arrSequenceBatchProcessingCleanUp, t_intNumberOfCalculatedBatchesToBeProcessed);
  DATA_CONTROLLER::Sequence_ReformatToMatchNumberOfSamples(ML_STAR, ML_STAR.DWP_04, 1, t_intNumberOfSamplesFromFile, t_seqDWP_Pipette04);
  l_arrEmptyArrayForTransportSequences.SetSize(0);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.PCR_Pipette01, l_arrEmptyArrayForTransportSequences, t_trpPCR_Pipette01, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.PCR_Pipette02, l_arrEmptyArrayForTransportSequences, t_trpPCR_Pipette02, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.PCR_Pipette03, l_arrEmptyArrayForTransportSequences, t_trpPCR_Pipette03, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.PCR_Magnet, l_arrEmptyArrayForTransportSequences, t_trpPCR_Magnet, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.PCR_HHS01, l_arrEmptyArrayForTransportSequences, t_trpPCR_HHS01, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.PCR_HHS02, l_arrEmptyArrayForTransportSequences, t_trpPCR_HHS02, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.PCR_ODTC, l_arrEmptyArrayForTransportSequences, t_trpPCR_ODTC, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.PCR_ODTC_inverted, l_arrEmptyArrayForTransportSequences, t_trpPCR_ODTC_inverted, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.PCR_Waste, l_arrEmptyArrayForTransportSequences, t_trpPCR_Waste, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.PCR_Waste_inverted, l_arrEmptyArrayForTransportSequences, t_trpPCR_Waste_inverted, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.Lid_ODTC, l_arrEmptyArrayForTransportSequences, t_trpLid_ODTC, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.Lid_ODTC_inverted, l_arrEmptyArrayForTransportSequences, t_trpLid_ODTC_inverted, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.Lid_Waste, l_arrEmptyArrayForTransportSequences, t_trpLid_Waste, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.Lid_Waste_inverted, l_arrEmptyArrayForTransportSequences, t_trpLid_Waste_inverted, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.MIDI_Pipette03, l_arrEmptyArrayForTransportSequences, t_trpMIDI_Pipette03, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.MIDI_CPAC02, l_arrEmptyArrayForTransportSequences, t_trpMIDI_CPAC02, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.MIDI_CPAC03, l_arrEmptyArrayForTransportSequences, t_trpMIDI_CPAC03, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.MIDI_HHS03, l_arrEmptyArrayForTransportSequences, t_trpMIDI_HHS03, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.MIDI_HHS04, l_arrEmptyArrayForTransportSequences, t_trpMIDI_HHS04, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.MIDI_HHS05, l_arrEmptyArrayForTransportSequences, t_trpMIDI_HHS05, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.MIDI_Waste, l_arrEmptyArrayForTransportSequences, t_trpMIDI_Waste, 2);
  DATA_CONTROLLER::Sequence_CreateNewPipettingOrTransportSequences(ML_STAR.MIDI_Waste_inverted, l_arrEmptyArrayForTransportSequences, t_trpMIDI_Waste_inverted, 2);
  DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Calculate Reagents and Consumables"), ASWGLOBAL::BOOL::TRUE);
  t_blnIndexplateLoaded = ASWGLOBAL::BOOL::FALSE;
  t_blnIndexPlateSecured = ASWGLOBAL::BOOL::FALSE;
  t_blnSPRIselectAndBufferEBplated = ASWGLOBAL::BOOL::FALSE;
  t_blnMasterMixPlated = ASWGLOBAL::BOOL::FALSE;
  l_strSPRIselect = Translate("SPRIselect");
  l_strSPRIselectPlate = Translate("SPRIselect Plate");
  l_strEtOH = Translate("EtOH 80%");
  l_strBufferEB = Translate("Buffer EB");
  l_strBufferEBplate = Translate("Buffer EB Plate");
  l_intNumberOfTubes = 0;
  l_fltFractionalComponent = 0;
  t_intRequiredNumberOf300uLTips_Total = 0;
  l_arr_strReagentNameTubesCPAC.SetSize(0);
  l_arr_strVolumeTubesCPAC.SetSize(0);
  l_arr_strTubeTypeCPAC.SetSize(0);
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Calculated volumes for Process 1: "), t_intNumberOfSamplesFromFile, Translate(" number of samples to be processed."), Translate(""));
    t_fltVolume_Sample = 10.0;
    t_fltVolume_FragmentationMix = 40.0;
    t_fltVolume_BufferEB_FragmentationMix = 25.0;
    t_fltVolume_FragmentationBuffer = 5.0;
    t_fltVolume_FragmentationEnzyme = 10.0;
    l_strReagentName = Translate("Fragmentation Buffer");
    l_intStartPointSource = 1;
    {
      variable fltSum;
      fltSum = t_fltVolume_BufferEB_FragmentationMix + t_fltVolume_FragmentationBuffer + t_fltVolume_FragmentationEnzyme;
      l_fltFractionalComponent = t_fltVolume_FragmentationBuffer / fltSum * t_fltVolumeDeadOfIntermediatePlate;
      Trace(t_strTraceTag, " ", l_strReagentName, " Fractional Component: ", l_fltFractionalComponent, " ", t_strTraceTag);
    }
    REAGENTPLATING_CONTROLLER::ReagentPlateCreation_SpecifyNumberOfSourceTubes(t_intNumberOfSamplesFromFile, t_intNumberOfIntermediatePlateWells, t_intNumberOfSouceTubes, t_fltVolume_FragmentationBuffer, t_fltVolumeDeadOfDot5mLTube, l_fltFractionalComponent, t_fltVolumeDeadPercentOfLiquidTransfer, ML_STAR.Tubes24_CPAC, l_intStartPointSource, ASWGLOBAL::BOOL::FALSE, t_seqFragmentationBuffer, t_arr_fltVolumeSource_FragmentationBuffer, t_arr_fltVolumeTarget_FragmentationBuffer, l_arr_fltVolumeTubes_FragmentationBuffer, l_arr_intNumberOfReactionsPerTube_FragmentationBuffer, l_arr_intNumberOfReactionsPerWell_FragmentationBuffer);
    REAGENTPLATING_CONTROLLER::ReagentPlateLoadInformation_SpecifyNumberOfSourceTubes(l_strReagentName, t_strTubeNameDot5mL, l_intStartPointSource, l_arr_fltVolumeTubes_FragmentationBuffer, l_arr_strReagentName_FragmentationBuffer, l_arr_strVolume_FragmentationBuffer, l_arr_strTubeType_FragmentationBuffer);
    l_strReagentName = Translate("Fragmentation Enzyme");
    l_intStartPointSource = 5;
    {
      variable fltSum;
      fltSum = t_fltVolume_BufferEB_FragmentationMix + t_fltVolume_FragmentationBuffer + t_fltVolume_FragmentationEnzyme;
      l_fltFractionalComponent = t_fltVolume_FragmentationEnzyme / fltSum * t_fltVolumeDeadOfIntermediatePlate;
      Trace(t_strTraceTag, " ", l_strReagentName, " Fractional Component: ", l_fltFractionalComponent, " ", t_strTraceTag);
    }
    REAGENTPLATING_CONTROLLER::ReagentPlateCreation_SpecifyNumberOfSourceTubes(t_intNumberOfSamplesFromFile, t_intNumberOfIntermediatePlateWells, t_intNumberOfSouceTubes, t_fltVolume_FragmentationEnzyme, t_fltVolumeDeadOfDot5mLTube, l_fltFractionalComponent, t_fltVolumeDeadPercentOfLiquidTransfer, ML_STAR.Tubes24_CPAC, l_intStartPointSource, ASWGLOBAL::BOOL::FALSE, t_seqFragmentationEnzyme, t_arr_fltVolumeSource_FragmentationEnzyme, t_arr_fltVolumeTarget_FragmentationEnzyme, l_arr_fltVolumeTubes_FragmentationEnzyme, l_arr_intNumberOfReactionsPerTube_FragmentationEnzyme, l_arr_intNumberOfReactionsPerWell_FragmentationEnzyme);
    REAGENTPLATING_CONTROLLER::ReagentPlateLoadInformation_SpecifyNumberOfSourceTubes(l_strReagentName, t_strTubeNameDot5mL, l_intStartPointSource, l_arr_fltVolumeTubes_FragmentationEnzyme, l_arr_strReagentName_FragmentationEnzyme, l_arr_strVolume_FragmentationEnzyme, l_arr_strTubeType_FragmentationEnzyme);
    l_intStartPointTarget = 1;
    REAGENTPLATING_CONTROLLER::ReagentPlateSequences(ML_STAR, ML_STAR.MIDI_Pipette03, ML_STAR.PCR_Pipette02, l_intStartPointTarget, t_intNumberOfSamplesFromFile, t_intNumberOfIntermediatePlateWells, t_seqIntermediateDispense_FragmentationMix, t_seqIntermediateAspirateChannels_FragmentationMix, t_seqProcessChannels_FragmentationMix, t_seqIntermediateAspirateMPH_FragmentationMix, t_seqProcessMPH_FragmentationMix);
    REAGENTPLATING_CONTROLLER::ReagentPlateSequences(ML_STAR, ML_STAR.MIDI_CPAC02, ML_STAR.MIDI_Pipette03, l_intStartPointTarget, t_intNumberOfSamplesFromFile, t_intNumberOfIntermediatePlateWells, t_seqIntermediateDispense_FragmentationMix_Create, l_seqJunk01, l_seqJunk02, l_seqJunk03, l_seqJunk04);
    l_arr_strReagentNameTubesCPAC = HSLExtensions::Array::Concat(l_arr_strReagentNameTubesCPAC, l_arr_strReagentName_FragmentationBuffer);
    l_arr_strReagentNameTubesCPAC = HSLExtensions::Array::Concat(l_arr_strReagentNameTubesCPAC, l_arr_strReagentName_FragmentationEnzyme);
    l_arr_strVolumeTubesCPAC = HSLExtensions::Array::Concat(l_arr_strVolumeTubesCPAC, l_arr_strVolume_FragmentationBuffer);
    l_arr_strVolumeTubesCPAC = HSLExtensions::Array::Concat(l_arr_strVolumeTubesCPAC, l_arr_strVolume_FragmentationEnzyme);
    l_arr_strTubeTypeCPAC = HSLExtensions::Array::Concat(l_arr_strTubeTypeCPAC, l_arr_strTubeType_FragmentationBuffer);
    l_arr_strTubeTypeCPAC = HSLExtensions::Array::Concat(l_arr_strTubeTypeCPAC, l_arr_strTubeType_FragmentationEnzyme);
    l_strReagentName = Translate("Buffer EB");
    l_intStartPointSource = 1;
    {
      variable fltSum;
      fltSum = t_fltVolume_BufferEB_FragmentationMix + t_fltVolume_FragmentationBuffer + t_fltVolume_FragmentationEnzyme;
      l_fltFractionalComponent = t_fltVolume_BufferEB_FragmentationMix / fltSum * t_fltVolumeDeadOfIntermediatePlate;
      Trace(t_strTraceTag, " ", l_strReagentName, " Fractional Component: ", l_fltFractionalComponent, " ", t_strTraceTag);
    }
    REAGENTPLATING_CONTROLLER::ReagentPlateCreation_SpecifyNumberOfSourceTubes(t_intNumberOfSamplesFromFile, t_intNumberOfIntermediatePlateWells, 1, t_fltVolume_BufferEB_FragmentationMix, 0, l_fltFractionalComponent, t_fltVolumeDeadPercentOfLiquidTransfer, ML_STAR.RGT20ml_04, l_intStartPointSource, ASWGLOBAL::BOOL::FALSE, t_seqBufferEB_FragmentationMix, t_arr_fltVolumeSource_BufferEB_MM, t_arr_fltVolumeTarget_BufferEB_MM, l_arr_fltVolumeTubes_BufferEB_MM, l_arr_intNumberOfReactionsPerTube_BufferEB_MM, l_arr_intNumberOfReactionsPerWell_BufferEB_MM);
    l_intNumberOfMIDIPlates = 0;
    l_intNumberOfPCRPlates = 0;
    l_intNumberOfLids = 1;
    l_int300TipBucket = t_intNumberOfIntermediatePlateWells * 3;
    DATA_CONTROLLER::CalculateTipConsumption(t_intNumberOfSamplesFromFile, 0, l_int300TipBucket, 1, t_intRequiredNumberOf300uLTipsProcess01);
    t_intRequiredNumberOf300uLTips_Total = t_intRequiredNumberOf300uLTips_Total + t_intRequiredNumberOf300uLTipsProcess01;
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("PCR Plate"), Translate(""), l_intNumberOfPCRPlates, ML_STAR.PCRStack01, 0);
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("MIDI Plate"), Translate(""), l_intNumberOfMIDIPlates, ML_STAR.MIDIStack01, 0);
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("Lid"), Translate(""), l_intNumberOfLids, ML_STAR.LidStack01, 0);
    l_strMessageLoadDNAInputPlate = StrConcat8(Translate("PCR plate containing "), Translate("10.0"), Translate(" 킠 purified cDNA in each well"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("Input Plate"), l_strMessageLoadDNAInputPlate, 1, ML_STAR.PCR_Pipette02, 0);
  }
  else
  {
    t_fltVolume_Sample = 10.0;
    t_fltVolume_FragmentationMix = 40.0;
  }
  if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Calculated volumes for Process 2: "), t_intNumberOfSamplesFromFile, Translate(" number of samples to be processed."), Translate(""));
    t_fltVolume_SPRI_1_P2 = 30.0;
    t_fltVolume_Mix_1_P2 = 70.0;
    t_fltVolume_Supernatant_1_P2 = 75.0;
    t_fltVolume_SPRI_2_P2 = 10.0;
    t_fltVolume_Mix_2_P2 = 75.0;
    t_fltVolume_Supernatant_2_P2 = 80.0;
    t_fltVolume_EtOH_P2 = 125.0;
    t_fltVolume_BufferEB_P2 = 55.0;
    t_fltVolume_Mix_3_P2 = 45.0;
    t_fltVolume_Supernatant_3_P2 = 50.0;
    l_intNumberOfMIDIPlates = 0;
    l_intNumberOfPCRPlates = 2;
    l_intNumberOfLids = 0;
    l_intBufferEBtips = 8;
    l_intMixByOverturnTips = 8;
    l_intSPRItips = t_intNumberOfSamplesFromFile;
    l_intPreparationTips = l_intBufferEBtips + l_intMixByOverturnTips + l_intSPRItips;
    DATA_CONTROLLER::CalculateTipConsumption(t_intNumberOfSamplesFromFile, 0, l_intPreparationTips, 7, t_intRequiredNumberOf300uLTipsProcess02);
    t_intRequiredNumberOf300uLTips_Total = t_intRequiredNumberOf300uLTips_Total + t_intRequiredNumberOf300uLTipsProcess02;
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("PCR Plate"), Translate(""), l_intNumberOfPCRPlates, ML_STAR.PCRStack01, 0);
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("MIDI Plate"), Translate(""), l_intNumberOfMIDIPlates, ML_STAR.MIDIStack01, 0);
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("Lid"), Translate(""), l_intNumberOfLids, ML_STAR.LidStack01, 0);
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::FALSE)
    {
      l_strMessageLoadDNAInputPlate = StrConcat8(Translate("PCR plate containing "), 50, Translate(" 킠 fragmented, end repaired, and A-tailed cDNA from"), Translate(" Process 1"), Translate(" in each well"), Translate(""), Translate(""), Translate(""));
      LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("Input Plate"), l_strMessageLoadDNAInputPlate, 1, ML_STAR.PCR_Pipette02, 0);
    }
  }
  else
  {
    t_fltVolume_Supernatant_3_P2 = 50.0;
  }
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Calculated volumes for Process 3: "), t_intNumberOfSamplesFromFile, Translate(" number of samples to be processed."), Translate(""));
    t_fltVolume_AdaptorLigationMix = 50.0;
    t_fltVolume_LigationMix = 40.0;
    t_fltVolume_DNAligase = 10.0;
    l_strReagentName = Translate("Ligation Mix");
    l_intStartPointSource = 9;
    {
      variable fltSum;
      fltSum = t_fltVolume_LigationMix + t_fltVolume_DNAligase;
      l_fltFractionalComponent = t_fltVolume_LigationMix / fltSum * t_fltVolumeDeadOfIntermediatePlate;
      Trace(t_strTraceTag, " ", l_strReagentName, " Fractional Component: ", l_fltFractionalComponent, " ", t_strTraceTag);
    }
    REAGENTPLATING_CONTROLLER::ReagentPlateCreation_SpecifyNumberOfSourceTubes(t_intNumberOfSamplesFromFile, t_intNumberOfIntermediatePlateWells, t_intNumberOfSouceTubes, t_fltVolume_LigationMix, t_fltVolumeDeadOf2mLTube, l_fltFractionalComponent, t_fltVolumeDeadPercentOfLiquidTransfer, ML_STAR.Tubes24_CPAC, l_intStartPointSource, ASWGLOBAL::BOOL::FALSE, t_seqLigationMix, t_arr_fltVolumeSource_LigationMix, t_arr_fltVolumeTarget_LigationMix, l_arr_fltVolumeTubes_LigationMix, l_arr_intNumberOfReactionsPerTube_LigationMix, l_arr_intNumberOfReactionsPerWell_LigationMix);
    REAGENTPLATING_CONTROLLER::ReagentPlateLoadInformation_SpecifyNumberOfSourceTubes(l_strReagentName, t_strTubeName2mL, l_intStartPointSource, l_arr_fltVolumeTubes_LigationMix, l_arr_strReagentName_LigationMix, l_arr_strVolume_LigationMix, l_arr_strTubeType_LigationMix);
    l_strReagentName = Translate("DNA Ligase");
    l_intStartPointSource = 13;
    {
      variable fltSum;
      fltSum = t_fltVolume_LigationMix + t_fltVolume_DNAligase;
      l_fltFractionalComponent = t_fltVolume_DNAligase / fltSum * t_fltVolumeDeadOfIntermediatePlate;
      Trace(t_strTraceTag, " ", l_strReagentName, " Fractional Component: ", l_fltFractionalComponent, " ", t_strTraceTag);
    }
    REAGENTPLATING_CONTROLLER::ReagentPlateCreation_SpecifyNumberOfSourceTubes(t_intNumberOfSamplesFromFile, t_intNumberOfIntermediatePlateWells, t_intNumberOfSouceTubes, t_fltVolume_DNAligase, t_fltVolumeDeadOfDot5mLTube, l_fltFractionalComponent, t_fltVolumeDeadPercentOfLiquidTransfer, ML_STAR.Tubes24_CPAC, l_intStartPointSource, ASWGLOBAL::BOOL::FALSE, t_seqDNAligase, t_arr_fltVolumeSource_DNAligase, t_arr_fltVolumeTarget_DNAligase, l_arr_fltVolumeTubes_DNAligase, l_arr_intNumberOfReactionsPerTube_DNAligase, l_arr_intNumberOfReactionsPerWell_DNAligase);
    REAGENTPLATING_CONTROLLER::ReagentPlateLoadInformation_SpecifyNumberOfSourceTubes(l_strReagentName, t_strTubeNameDot5mL, l_intStartPointSource, l_arr_fltVolumeTubes_DNAligase, l_arr_strReagentName_DNAligase, l_arr_strVolume_DNAligase, l_arr_strTubeType_DNAligase);
    l_intStartPointTarget = 25;
    REAGENTPLATING_CONTROLLER::ReagentPlateSequences(ML_STAR, ML_STAR.MIDI_Pipette03, ML_STAR.PCR_Pipette02, l_intStartPointTarget, t_intNumberOfSamplesFromFile, t_intNumberOfIntermediatePlateWells, t_seqIntermediateDispense_AdaptorLigationMix, t_seqIntermediateAspirateChannels_AdaptorLigationMix, t_seqProcessChannels_AdaptorLigationMix, t_seqIntermediateAspirateMPH_AdaptorLigationMix, t_seqProcessMPH_AdaptorLigationMix);
    REAGENTPLATING_CONTROLLER::ReagentPlateSequences(ML_STAR, ML_STAR.MIDI_CPAC02, ML_STAR.MIDI_Pipette03, l_intStartPointTarget, t_intNumberOfSamplesFromFile, t_intNumberOfIntermediatePlateWells, t_seqIntermediateDispense_AdaptorLigationMix_Create, l_seqJunk01, l_seqJunk02, l_seqJunk03, l_seqJunk04);
    l_arr_strReagentNameTubesCPAC = HSLExtensions::Array::Concat(l_arr_strReagentNameTubesCPAC, l_arr_strReagentName_LigationMix);
    l_arr_strReagentNameTubesCPAC = HSLExtensions::Array::Concat(l_arr_strReagentNameTubesCPAC, l_arr_strReagentName_DNAligase);
    l_arr_strVolumeTubesCPAC = HSLExtensions::Array::Concat(l_arr_strVolumeTubesCPAC, l_arr_strVolume_LigationMix);
    l_arr_strVolumeTubesCPAC = HSLExtensions::Array::Concat(l_arr_strVolumeTubesCPAC, l_arr_strVolume_DNAligase);
    l_arr_strTubeTypeCPAC = HSLExtensions::Array::Concat(l_arr_strTubeTypeCPAC, l_arr_strTubeType_LigationMix);
    l_arr_strTubeTypeCPAC = HSLExtensions::Array::Concat(l_arr_strTubeTypeCPAC, l_arr_strTubeType_DNAligase);
    l_intNumberOfMIDIPlates = 0;
    l_intNumberOfPCRPlates = 0;
    l_intNumberOfLids = 1;
    if (t_arr_fltVolumeTarget_LigationMix.ElementAt( 1 -1) > 300.0)
    {
      l_int300TipBucket = t_intNumberOfIntermediatePlateWells * 3;
    }
    else
    {
      l_int300TipBucket = t_intNumberOfIntermediatePlateWells * 2;
    }
    DATA_CONTROLLER::CalculateTipConsumption(t_intNumberOfSamplesFromFile, 0, l_int300TipBucket, 1, t_intRequiredNumberOf300uLTipsProcess03);
    t_intRequiredNumberOf300uLTips_Total = t_intRequiredNumberOf300uLTips_Total + t_intRequiredNumberOf300uLTipsProcess03;
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("PCR Plate"), Translate(""), l_intNumberOfPCRPlates, ML_STAR.PCRStack01, 0);
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("MIDI Plate"), Translate(""), l_intNumberOfMIDIPlates, ML_STAR.MIDIStack01, 0);
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("Lid"), Translate(""), l_intNumberOfLids, ML_STAR.LidStack01, 0);
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::FALSE&& t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::FALSE)
    {
      l_strMessageLoadDNAInputPlate = StrConcat8(Translate("PCR plate containing "), 50, Translate(" 킠 purified, post-fragmented, end repaired, and A-tailed cDNA from"), Translate(" Process 2"), Translate(" in each well"), Translate(""), Translate(""), Translate(""));
      LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("Input Plate"), l_strMessageLoadDNAInputPlate, 1, ML_STAR.PCR_Pipette02, 0);
    }
  }
  else
  {
    t_fltVolume_AdaptorLigationMix = 50.0;
  }
  if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Calculated volumes for Process 4: "), t_intNumberOfSamplesFromFile, Translate(" number of samples to be processed."), Translate(""));
    t_fltVolume_SPRI_P4 = 80.0;
    t_fltVolume_Mix_1_P4 = 150.0;
    t_fltVolume_EtOH_P4 = 200.0;
    t_fltVolume_BufferEB_P4 = 35.0;
    t_fltVolume_Mix_2_P4 = 35.0;
    t_fltVolume_Supernatant_P4 = 30.0;
    l_intNumberOfMIDIPlates = 0;
    l_intNumberOfPCRPlates = 1;
    l_intNumberOfLids = 0;
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::FALSE)
    {
      l_intBufferEBtips = 8;
      l_intMixByOverturnTips = 8;
      l_intSPRItips = t_intNumberOfSamplesFromFile;
      l_intPreparationTips = l_intBufferEBtips + l_intMixByOverturnTips + l_intSPRItips;
    }
    else
    {
      l_intPreparationTips = 0;
    }
    DATA_CONTROLLER::CalculateTipConsumption(t_intNumberOfSamplesFromFile, 0, l_intPreparationTips, 5, t_intRequiredNumberOf300uLTipsProcess04);
    t_intRequiredNumberOf300uLTips_Total = t_intRequiredNumberOf300uLTips_Total + t_intRequiredNumberOf300uLTipsProcess04;
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("PCR Plate"), Translate(""), l_intNumberOfPCRPlates, ML_STAR.PCRStack01, 0);
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("MIDI Plate"), Translate(""), l_intNumberOfMIDIPlates, ML_STAR.MIDIStack01, 0);
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("Lid"), Translate(""), l_intNumberOfLids, ML_STAR.LidStack01, 0);
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::FALSE&& t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::FALSE&& t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::FALSE)
    {
      l_strMessageLoadDNAInputPlate = StrConcat8(Translate("PCR plate containing "), 100, Translate(" 킠 adaptor ligated cDNA from"), Translate(" Process 3"), Translate(" in each well"), Translate(""), Translate(""), Translate(""));
      LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("Input Plate"), l_strMessageLoadDNAInputPlate, 1, ML_STAR.PCR_Pipette02, 0);
    }
  }
  else
  {
    t_fltVolume_Supernatant_P4 = 30.0;
  }
  if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Calculated volumes for Process 5: "), t_intNumberOfSamplesFromFile, Translate(" number of samples to be processed."), Translate(""));
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("Dual Index TT Set A Plate"), Translate("10x kit index plate - do not pre-pierce"), 1, ML_STAR.PCR_Pipette01, 0);
    t_blnIndexplateLoaded = ASWGLOBAL::BOOL::TRUE;
    t_fltVolume_LibraryAmpMix = 50.0;
    t_fltVolume_DualIndex = 20.0;
    l_strReagentName = Translate("Library Amp Mix");
    l_intStartPointSource = 17;
    l_intStartPointTarget = 49;
    {
      variable fltSum;
      fltSum = t_fltVolume_LibraryAmpMix;
      l_fltFractionalComponent = t_fltVolume_LibraryAmpMix / fltSum * t_fltVolumeDeadOfIntermediatePlate;
      Trace(t_strTraceTag, " ", l_strReagentName, " Fractional Component: ", l_fltFractionalComponent, " ", t_strTraceTag);
    }
    REAGENTPLATING_CONTROLLER::ReagentPlateCreation_SpecifyNumberOfSourceTubes(t_intNumberOfSamplesFromFile, t_intNumberOfIntermediatePlateWells, t_intNumberOfSouceTubes, t_fltVolume_LibraryAmpMix, t_fltVolumeDeadOf2mLTube, l_fltFractionalComponent, t_fltVolumeDeadPercentOfLiquidTransfer, ML_STAR.Tubes24_CPAC, l_intStartPointSource, ASWGLOBAL::BOOL::FALSE, t_seqLibraryAmpMix, t_arr_fltVolumeSource_LibraryAmpMix, t_arr_fltVolumeTarget_LibraryAmpMix, l_arr_fltVolumeTubes_LibraryAmpMix, l_arr_intNumberOfReactionsPerTube_LibraryAmpMix, l_arr_intNumberOfReactionsPerWell_LibraryAmpMix);
    REAGENTPLATING_CONTROLLER::ReagentPlateLoadInformation_SpecifyNumberOfSourceTubes(l_strReagentName, t_strTubeName2mL, l_intStartPointSource, l_arr_fltVolumeTubes_LibraryAmpMix, l_arr_strReagentName_LibraryAmpMix, l_arr_strVolume_LibraryAmpMix, l_arr_strTubeType_LibraryAmpMix);
    l_intStartPointTarget = 49;
    REAGENTPLATING_CONTROLLER::ReagentPlateSequences(ML_STAR, ML_STAR.MIDI_Pipette03, ML_STAR.PCR_Pipette02, l_intStartPointTarget, t_intNumberOfSamplesFromFile, t_intNumberOfIntermediatePlateWells, t_seqIntermediateDispense_LibraryAmpMix, t_seqIntermediateAspirateChannels_LibraryAmpMix, t_seqProcessChannels_LibraryAmpMix, t_seqIntermediateAspirateMPH_LibraryAmpMix, t_seqProcessMPH_LibraryAmpMix);
    REAGENTPLATING_CONTROLLER::ReagentPlateSequences(ML_STAR, ML_STAR.MIDI_CPAC02, ML_STAR.MIDI_Pipette03, l_intStartPointTarget, t_intNumberOfSamplesFromFile, t_intNumberOfIntermediatePlateWells, t_seqIntermediateDispense_LibraryAmpMix_Create, l_seqJunk01, l_seqJunk02, l_seqJunk03, l_seqJunk04);
    l_arr_strReagentNameTubesCPAC = HSLExtensions::Array::Concat(l_arr_strReagentNameTubesCPAC, l_arr_strReagentName_LibraryAmpMix);
    l_arr_strVolumeTubesCPAC = HSLExtensions::Array::Concat(l_arr_strVolumeTubesCPAC, l_arr_strVolume_LibraryAmpMix);
    l_arr_strTubeTypeCPAC = HSLExtensions::Array::Concat(l_arr_strTubeTypeCPAC, l_arr_strTubeType_LibraryAmpMix);
    l_intNumberOfMIDIPlates = 0;
    l_intNumberOfPCRPlates = 0;
    l_intNumberOfLids = 1;
    if (t_arr_fltVolumeTarget_LibraryAmpMix.ElementAt( 1 -1) > 300.0)
    {
      l_int300TipBucket = t_intNumberOfIntermediatePlateWells * 2;
    }
    else
    {
      l_int300TipBucket = t_intNumberOfIntermediatePlateWells * 1;
    }
    DATA_CONTROLLER::CalculateTipConsumption(t_intNumberOfSamplesFromFile, 1, l_int300TipBucket, 1, t_intRequiredNumberOf300uLTipsProcess05);
    t_intRequiredNumberOf300uLTips_Total = t_intRequiredNumberOf300uLTips_Total + t_intRequiredNumberOf300uLTipsProcess05;
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("PCR Plate"), Translate(""), l_intNumberOfPCRPlates, ML_STAR.PCRStack01, 0);
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("MIDI Plate"), Translate(""), l_intNumberOfMIDIPlates, ML_STAR.MIDIStack01, 0);
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("Lid"), Translate(""), l_intNumberOfLids, ML_STAR.LidStack01, 0);
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::FALSE&& t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::FALSE&& t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::FALSE&& t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::FALSE)
    {
      l_strMessageLoadDNAInputPlate = StrConcat8(Translate("PCR plate containing "), 30, Translate(" 킠 purified, post-adaptor ligated cDNA from"), Translate(" Process 4"), Translate(" in each well"), Translate(""), Translate(""), Translate(""));
      LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("Input Plate"), l_strMessageLoadDNAInputPlate, 1, ML_STAR.PCR_Pipette02, 0);
    }
  }
  else
  {
    t_fltVolume_LibraryAmpMix = 50.0;
    t_fltVolume_DualIndex = 20.0;
  }
  if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("Calculated volumes for Process 6: "), t_intNumberOfSamplesFromFile, Translate(" number of samples to be processed."), Translate(""));
    t_fltVolume_SPRI_1_P6 = 60.0;
    t_fltVolume_Mix_1_P6 = 130.0;
    t_fltVolume_Supernatant_1_P6 = 150.0;
    t_fltVolume_SPRI_2_P6 = 20.0;
    t_fltVolume_Mix_2_P6 = 145.0;
    t_fltVolume_Supernatant_2_P6 = 165.0;
    t_fltVolume_EtOH_P6 = 200.0;
    t_fltVolume_BufferEB_P6 = 40.0;
    t_fltVolume_Mix_3_P6 = 35.0;
    t_fltVolume_Supernatant_3_P6 = 35.0;
    l_intNumberOfMIDIPlates = 0;
    l_intNumberOfPCRPlates = 2;
    l_intNumberOfLids = 0;
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::FALSE)
    {
      if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::FALSE)
      {
        l_intBufferEBtips = 8;
        l_intMixByOverturnTips = 8;
        l_intSPRItips = t_intNumberOfSamplesFromFile;
        l_intPreparationTips = l_intBufferEBtips + l_intMixByOverturnTips + l_intSPRItips;
      }
      else
      {
        l_intPreparationTips = 0;
      }
    }
    else
    {
      l_intPreparationTips = 0;
    }
    DATA_CONTROLLER::CalculateTipConsumption(t_intNumberOfSamplesFromFile, 0, l_intPreparationTips, 7, t_intRequiredNumberOf300uLTipsProcess06);
    t_intRequiredNumberOf300uLTips_Total = t_intRequiredNumberOf300uLTips_Total + t_intRequiredNumberOf300uLTipsProcess06;
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("PCR Plate"), Translate(""), l_intNumberOfPCRPlates, ML_STAR.PCRStack01, 0);
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("MIDI Plate"), Translate(""), l_intNumberOfMIDIPlates, ML_STAR.MIDIStack01, 0);
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("Lid"), Translate(""), l_intNumberOfLids, ML_STAR.LidStack01, 0);
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::FALSE&& t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::FALSE&& t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::FALSE&& t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::FALSE&& t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::FALSE)
    {
      l_strMessageLoadDNAInputPlate = StrConcat8(Translate("PCR plate containing "), 100, Translate(" 킠 indexed and amplified cDNA from"), Translate(" Process 5"), Translate(" in each well"), Translate(""), Translate(""), Translate(""));
      LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("Input Plate"), l_strMessageLoadDNAInputPlate, 1, ML_STAR.PCR_Pipette02, 0);
    }
  }
  else
  {
    t_fltVolume_Supernatant_3_P6 = 35.0;
  }
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("MIDI Plate"), Translate(""), 1, ML_STAR.MIDIStack01, 0);
  }
  else
  {
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("MIDI Plate"), Translate(""), 1, ML_STAR.MIDIStack01, 0);
    }
    else
    {
      if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("MIDI Plate"), Translate(""), 1, ML_STAR.MIDIStack01, 0);
      }
    }
  }
  if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("MIDI Plate"), Translate(""), 2, ML_STAR.MIDIStack01, 0);
  }
  else
  {
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("MIDI Plate"), Translate(""), 2, ML_STAR.MIDIStack01, 0);
    }
    else
    {
      if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("MIDI Plate"), Translate(""), 2, ML_STAR.MIDIStack01, 0);
      }
    }
  }
  l_blnUseLargeTroughs = ASWGLOBAL::BOOL::FALSE;
  if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE|| t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE|| t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_fltVolumeSPRItotal = t_fltVolume_SPRI_1_P2 + t_fltVolume_SPRI_2_P2 + t_fltVolume_SPRI_P4 + t_fltVolume_SPRI_1_P6 + t_fltVolume_SPRI_2_P6;
    l_strReagentName = Translate("SPRIselect");
    l_intStartPointSource = 1;
    l_intStartPointTarget = 1;
    REAGENTPLATING_CONTROLLER::ReagentPlateCreation_SpecifyNumberOfSourceTubes(t_intNumberOfSamplesFromFile, t_intNumberOfSamplesFromFile, 1, l_fltVolumeSPRItotal, t_fltVolumeDeadOf20mLTrough, t_fltVolumeDeadOfSPRIselectPlate, t_fltVolumeDeadPercentOfLiquidTransfer, ML_STAR.RGT20ml_05, l_intStartPointSource, ASWGLOBAL::BOOL::FALSE, t_seqSPRIselect, t_arr_fltVolumeSource_SPRIselect, t_arr_fltVolumeTarget_SPRIselect, t_arr_fltVolumeTubes_SPRIselect, l_arr_intNumberOfReactionsPerTube_SPRIselect, l_arr_intNumberOfReactionsPerWell_SPRIselect);
    if (t_arr_fltVolumeTubes_SPRIselect.ElementAt( 1 -1) > 20000)
    {
      SeqRemoveAll(t_seqSPRIselect);
      REAGENTPLATING_CONTROLLER::ReagentPlateCreation_SpecifyNumberOfSourceTubes(t_intNumberOfSamplesFromFile, t_intNumberOfSamplesFromFile, 1, l_fltVolumeSPRItotal, t_fltVolumeDeadOf50mLTrough, t_fltVolumeDeadOfSPRIselectPlate, t_fltVolumeDeadPercentOfLiquidTransfer, ML_STAR.RGT60ml_05, l_intStartPointSource, ASWGLOBAL::BOOL::FALSE, t_seqSPRIselect, t_arr_fltVolumeSource_SPRIselect, t_arr_fltVolumeTarget_SPRIselect, t_arr_fltVolumeTubes_SPRIselect, l_arr_intNumberOfReactionsPerTube_SPRIselect, l_arr_intNumberOfReactionsPerWell_SPRIselect);
      l_blnUseLargeTroughs = ASWGLOBAL::BOOL::TRUE;
      SeqCopySequence(t_seqSPRItrough, ML_STAR.RGT60ml_05);
    }
    else
    {
      SeqCopySequence(t_seqSPRItrough, ML_STAR.RGT20ml_05);
    }
    REAGENTPLATING_CONTROLLER::ReagentPlateSequences(ML_STAR, ML_STAR.MIDI_Pipette03, ML_STAR.PCR_Pipette02, l_intStartPointTarget, t_intNumberOfSamplesFromFile, t_intNumberOfSamplesFromFile, t_seqIntermediateDispense_SPRIselect, t_seqIntermediateAspirateChannels_SPRIselect, t_seqProcessChannels_SPRIselectPCR02, t_seqIntermediateAspirateMPH_SPRIselect, t_seqProcessMPH_SPRIselectPCR02);
    REAGENTPLATING_CONTROLLER::ReagentPlateSequences(ML_STAR, ML_STAR.MIDI_Pipette03, ML_STAR.PCR_Pipette01, l_intStartPointTarget, t_intNumberOfSamplesFromFile, t_intNumberOfSamplesFromFile, l_seqIntermediateDispense_SPRIselect, l_seqIntermediateAspirateChannels_SPRIselect, t_seqProcessChannels_SPRIselectPCR01, l_seqIntermediateAspirateMPH_SPRIselect, t_seqProcessMPH_SPRIselectPCR01);
    l_fltVolumeSPRItotal = t_arr_fltVolumeTubes_SPRIselect.ElementAt( 1 -1);
    t_fltVolumeSPRIselectTracking = t_arr_fltVolumeTarget_SPRIselect.ElementAt( 1 -1);
    l_strUnit = Translate("킠");
    if(0){
      if (l_fltVolumeSPRItotal >= 1000.0)
      {
        l_fltVolumeSPRItotal = l_fltVolumeSPRItotal / (1000.0 * 1.0);
        l_strUnit = Translate("mL");
      }
    }
    l_fltVolumeSPRItotal = StrFStr(l_fltVolumeSPRItotal);
    l_intIndex = StrFind(l_fltVolumeSPRItotal, Translate("."));
    l_intIndex = l_intIndex + 2;
    l_fltVolumeSPRItotal = StrLeft(l_fltVolumeSPRItotal, l_intIndex);
    l_strSPRIdescription = "SPRIselect" + "\n1 x [" + l_fltVolumeSPRItotal + " " + l_strUnit + "]";
    Trace(t_strTraceTag, " ", l_strSPRIdescription, " ", t_strTraceTag);
    if (l_blnUseLargeTroughs == ASWGLOBAL::BOOL::FALSE)
    {
      LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("20 mL Trough"), l_strSPRIdescription, 1, ML_STAR.RGT20ml_05, 0);
    }
    else
    {
      LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("50 mL Trough"), l_strSPRIdescription, 1, ML_STAR.RGT60ml_05, 0);
    }
  }
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE|| t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE|| t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE|| t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_fltVolumeBufferEBtotal = 0;
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE|| t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE|| t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_fltVolumeBufferEBtotal = t_fltVolume_BufferEB_P2 + t_fltVolume_BufferEB_P4 + t_fltVolume_BufferEB_P6;
      l_strReagentName = Translate("Buffer EB");
      l_intStartPointSource = 1;
      l_intStartPointTarget = 1;
      if (l_blnUseLargeTroughs == ASWGLOBAL::BOOL::FALSE)
      {
        REAGENTPLATING_CONTROLLER::ReagentPlateCreation_SpecifyNumberOfSourceTubes(t_intNumberOfSamplesFromFile, t_intNumberOfSamplesFromFile, 1, l_fltVolumeBufferEBtotal, 0, t_fltVolumeDeadOfIntermediatePlate, t_fltVolumeDeadPercentOfLiquidTransfer, ML_STAR.RGT20ml_04, l_intStartPointSource, ASWGLOBAL::BOOL::FALSE, t_seqBufferEB, t_arr_fltVolumeSource_BufferEB, t_arr_fltVolumeTarget_BufferEB, l_arr_fltVolumeTubes_BufferEB, l_arr_intNumberOfReactionsPerTube_BufferEB, l_arr_intNumberOfReactionsPerWell_BufferEB);
      }
      else
      {
        REAGENTPLATING_CONTROLLER::ReagentPlateCreation_SpecifyNumberOfSourceTubes(t_intNumberOfSamplesFromFile, t_intNumberOfSamplesFromFile, 1, l_fltVolumeBufferEBtotal, 0, t_fltVolumeDeadOfIntermediatePlate, t_fltVolumeDeadPercentOfLiquidTransfer, ML_STAR.RGT60ml_04, l_intStartPointSource, ASWGLOBAL::BOOL::FALSE, t_seqBufferEB, t_arr_fltVolumeSource_BufferEB, t_arr_fltVolumeTarget_BufferEB, l_arr_fltVolumeTubes_BufferEB, l_arr_intNumberOfReactionsPerTube_BufferEB, l_arr_intNumberOfReactionsPerWell_BufferEB);
      }
      REAGENTPLATING_CONTROLLER::ReagentPlateSequences(ML_STAR, ML_STAR.MIDI_Pipette03, ML_STAR.PCR_Pipette02, l_intStartPointTarget, t_intNumberOfSamplesFromFile, t_intNumberOfSamplesFromFile, t_seqIntermediateDispense_BufferEB, t_seqIntermediateAspirateChannels_BufferEB, t_seqProcessChannels_BufferEB, t_seqIntermediateAspirateMPH_BufferEB, t_seqProcessMPH_BufferEB);
      l_fltVolumeBufferEBtotal = l_arr_fltVolumeTubes_BufferEB.ElementAt( 1 -1);
    }
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_fltVolumeBufferEBtotal = l_fltVolumeBufferEBtotal + l_arr_fltVolumeTubes_BufferEB_MM.ElementAt( 1 -1);
      if (l_blnUseLargeTroughs == ASWGLOBAL::BOOL::FALSE)
      {
      }
      else
      {
        l_strLabwareID_1 = SeqGetLabwareId(ML_STAR.RGT20ml_04);
        l_strLabwareID_2 = SeqGetLabwareId(ML_STAR.RGT60ml_04);
        t_seqBufferEB_FragmentationMix = HSLExtensions::Sequence::ReplaceLabwareIdentifier(t_seqBufferEB_FragmentationMix, l_strLabwareID_1, l_strLabwareID_2);
      }
    }
    if (l_blnUseLargeTroughs == ASWGLOBAL::BOOL::FALSE)
    {
      l_fltVolumeBufferEBtotal = l_fltVolumeBufferEBtotal + t_fltVolumeDeadOf20mLTrough;
    }
    else
    {
      l_fltVolumeBufferEBtotal = l_fltVolumeBufferEBtotal + t_fltVolumeDeadOf50mLTrough;
    }
    l_strUnit = Translate("킠");
    if(0){
      if (l_fltVolumeBufferEBtotal >= 1000.0)
      {
        l_fltVolumeBufferEBtotal = l_fltVolumeBufferEBtotal / (1000.0 * 1.0);
        l_strUnit = Translate("mL");
      }
    }
    l_fltVolumeBufferEBtotal = StrFStr(l_fltVolumeBufferEBtotal);
    l_intIndex = StrFind(l_fltVolumeBufferEBtotal, Translate("."));
    l_intIndex = l_intIndex + 2;
    l_fltVolumeBufferEBtotal = StrLeft(l_fltVolumeBufferEBtotal, l_intIndex);
    l_strBufferEBdescription = "Buffer EB" + "\n1 x [" + l_fltVolumeBufferEBtotal + " " + l_strUnit + "]";
    Trace(t_strTraceTag, " ", l_strBufferEBdescription, " ", t_strTraceTag);
    if (l_blnUseLargeTroughs == ASWGLOBAL::BOOL::FALSE)
    {
      LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("20 mL Trough"), l_strBufferEBdescription, 1, ML_STAR.RGT20ml_04, 0);
    }
    else
    {
      LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("50 mL Trough"), l_strBufferEBdescription, 1, ML_STAR.RGT60ml_04, 0);
    }
  }
  if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE|| t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE|| t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    l_fltVolumeEtOHtotal = 0;
    l_fltVolumeEtOHtotal = ((t_fltVolume_EtOH_P2 + t_fltVolume_EtOH_P2 + t_fltVolume_EtOH_P4 + t_fltVolume_EtOH_P6 + t_fltVolume_EtOH_P6) * t_intNumberOfSamplesFromFile * 1.1 + t_fltVolumeDeadOfDWP) / 1000.0;
    REAGENTPLATING_CONTROLLER::ReagentPlateSequences(ML_STAR, ML_STAR.DWP_04, ML_STAR.PCR_Magnet, 1, t_intNumberOfSamplesFromFile, t_intNumberOfSamplesFromFile, t_seqIntermediateDispense_EtOH, t_seqIntermediateAspirateChannels_EtOH, t_seqProcessChannels_EtOH, t_seqIntermediateAspirateMPH_EtOH, t_seqProcessMPH_EtOH);
    l_fltVolumeEtOHtotal = StrFStr(l_fltVolumeEtOHtotal);
    l_intIndex = StrFind(l_fltVolumeEtOHtotal, Translate("."));
    l_intIndex = l_intIndex + 2;
    l_fltVolumeEtOHtotal = StrLeft(l_fltVolumeEtOHtotal, l_intIndex);
    l_strEtOHdescription = "Axygen DW Trough with " + l_fltVolumeEtOHtotal + " mL" + " 80% EtOH";
    Trace(l_strEtOHdescription);
    LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("DW Trough"), l_strEtOHdescription, 1, ML_STAR.DWP_04, 0);
  }
  LOADINGDIALOG_CONTROLLER::Add_LabwareForCurrentProcess(ML_STAR, Translate("300ul Filtered Tips"), Translate(""), t_intRequiredNumberOf300uLTips_Total, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
  t_arr_intTipsRequired.SetSize(0);
  t_arr_intTipsRequired.AddAsLast(0);
  t_arr_intTipsRequired.AddAsLast(t_intRequiredNumberOf300uLTips_Total);
  t_arr_intTipsRequired.AddAsLast(0);
  MECC::TraceComment(Translate("Stack definition"));
  LOADINGDIALOG_CONTROLLER::Get_NumberOfUnits_ByLabwareName(Translate("Lid"), Translate("ODTC_LidStack_Carrier"), l_intNumberOfUnitsLidStack01);
  if (l_intNumberOfUnitsLidStack01 > 0)
  {
    DATA_CONTROLLER::Sequence_DefineStacks(ML_STAR, ML_STAR.LidStack01, l_intNumberOfUnitsLidStack01, 5, t_trpLid_LidStack01, t_trpLid_LidStack01_asc);
  }
  LOADINGDIALOG_CONTROLLER::Get_NumberOfUnits_ByLabwareName(Translate("MIDI Plate"), Translate("Stack_Carrier"), l_intNumberOfUnitsMIDIStack01);
  if (l_intNumberOfUnitsMIDIStack01 > 0)
  {
    DATA_CONTROLLER::Sequence_DefineStacks(ML_STAR, ML_STAR.MIDIStack01, l_intNumberOfUnitsMIDIStack01, 4, t_trpMIDI_MIDIStack01, t_trpMIDI_MIDIStack01_asc);
  }
  LOADINGDIALOG_CONTROLLER::Get_NumberOfUnits_ByLabwareName(Translate("PCR Plate"), Translate("Stack_Carrier"), l_intNumberOfUnitsPCRStack01);
  if (l_intNumberOfUnitsPCRStack01 > 0)
  {
    DATA_CONTROLLER::Sequence_DefineStacks(ML_STAR, ML_STAR.PCRStack01, l_intNumberOfUnitsPCRStack01, 8, t_trpPCR_PCRStack01, t_trpPCR_PCRStack01_asc);
  }
  MECC::TraceComment(Translate("Stack definition completed"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intNumberOfUnitsLidStack01 : "), l_intNumberOfUnitsLidStack01);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intNumberOfUnitsMIDIStack01: "), l_intNumberOfUnitsMIDIStack01);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intNumberOfUnitsStackPCR01 : "), l_intNumberOfUnitsPCRStack01);
  LOADINGDIALOG_CONTROLLER::Evaluate_ResourcesByCarrier(ML_STAR, t_arr_strTemplateIDs_ToLoad, t_arr_strTemplateIDs_All);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("t_arr_strTemplateIDs_ToLoad"), t_arr_strTemplateIDs_ToLoad);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("t_arr_strTemplateIDs_All"), t_arr_strTemplateIDs_All);
  DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Load tip carriers"), ASWGLOBAL::BOOL::TRUE);
  l_arrStrTipCounterNames_Required.SetSize(0);
  if (t_intRequiredNumberOf50uLTips_Total > 0&& t_intRequiredNumberOf300uLTips_Total > 0&& t_intRequiredNumberOf1000uLTips_Total > 0)
  {
    l_arrStrTipCounterNames_Required=t_arrStrTipCounterNames;
  }
  else
  {
    if (t_intRequiredNumberOf50uLTips_Total > 0)
    {
      l_arrStrTipCounterNames_Required.AddAsLast(t_strTipCounterNameTip50);
    }
    if (t_intRequiredNumberOf300uLTips_Total > 0)
    {
      l_arrStrTipCounterNames_Required.AddAsLast(t_strTipCounterNameTip300);
    }
    if (t_intRequiredNumberOf1000uLTips_Total > 0)
    {
      l_arrStrTipCounterNames_Required.AddAsLast(t_strTipCounterNameTip1000);
    }
  }
  l_strLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("Tips.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  l_strMessageDisplayTipDialog = StrConcat12(Translate("Please load at least the following number of tips on deck."), Translate("\n\n"), Translate("Make sure to re-load all tip carriers and that no tip carrier remains on the loading tray."), Translate("\n\n"), Translate("After editing the tip counters in the following window, tip carriers will be loaded and barcodes scanned."), Translate("\n\n"), Translate("Please press OK to continue."), Translate("\n"), Translate("CANCEL will abort the run."), Translate(""), Translate(""), Translate(""));
  LOADINGDIALOG_CONTROLLER::DisplayDialog_Tips(l_strLoadingImagePath, l_strMessageDisplayTipDialog, 0, ML_STAR, Translate(""), 0);
  if (t_intRequiredNumberOf50uLTips_Total > 0&& t_intRequiredNumberOf300uLTips_Total > 0&& t_intRequiredNumberOf1000uLTips_Total > 0)
  {
    intReturnValueDialog = TIPMANAGEMENTLIBRARY::Edit_ShowTipEditDialogMultipleSequences(ML_STAR, t_arrStrTipCounterNames, t_arr_intTipsRequired, 0);
    if (intReturnValueDialog == TIP_TOOLS::ReturnCode::TipEditDialogCancelled)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("intReturnValueDialog: "), intReturnValueDialog);
      abort;
    }
  }
  else
  {
    if (t_intRequiredNumberOf50uLTips_Total > 0)
    {
      intReturnValueDialog = TIPMANAGEMENTLIBRARY::Edit_ShowTipEditDialog(ML_STAR, t_strTipCounterNameTip50, t_arr_intTipsRequired.ElementAt( 1 -1), 0);
      if (intReturnValueDialog == TIP_TOOLS::ReturnCode::TipEditDialogCancelled)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("intReturnValueDialog: "), intReturnValueDialog);
        abort;
      }
    }
    if (t_intRequiredNumberOf300uLTips_Total > 0)
    {
      intReturnValueDialog = TIPMANAGEMENTLIBRARY::Edit_ShowTipEditDialog(ML_STAR, t_strTipCounterNameTip300, t_arr_intTipsRequired.ElementAt( 2 -1), 0);
      if (intReturnValueDialog == TIP_TOOLS::ReturnCode::TipEditDialogCancelled)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("intReturnValueDialog: "), intReturnValueDialog);
        abort;
      }
    }
    if (t_intRequiredNumberOf1000uLTips_Total > 0)
    {
      intReturnValueDialog = TIPMANAGEMENTLIBRARY::Edit_ShowTipEditDialog(ML_STAR, t_strTipCounterNameTip1000, t_arr_intTipsRequired.ElementAt( 3 -1), 0);
      if (intReturnValueDialog == TIP_TOOLS::ReturnCode::TipEditDialogCancelled)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("intReturnValueDialog: "), intReturnValueDialog);
        abort;
      }
    }
  }
  LOADCARRIER_CONTROLLER::UnloadTipCarrierByTipCounterNames(ML_STAR, l_arrStrTipCounterNames_Required);
  LOADCARRIER_CONTROLLER::LoadTipCarrierByTipCounterNames(ML_STAR, l_arrStrTipCounterNames_Required, ASWGLOBAL::BOOL::TRUE);
  __ReviewORReloadStockOfTips(t_intRequiredNumberOf50uLTips_Total, t_intRequiredNumberOf300uLTips_Total, t_intRequiredNumberOf1000uLTips_Total);
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Load carriers"), ASWGLOBAL::BOOL::TRUE);
  l_strCarrierToLoad = Translate("ODTC_LidStack_Carrier");
  l_blnCarrierRequired = Util::Lookup(t_arr_strTemplateIDs_ToLoad, l_strCarrierToLoad, l_intIndexTemplateIDs_ToLoad);
  if (l_blnCarrierRequired == ASWGLOBAL::BOOL::TRUE)
  {
    l_strLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("ODTCHamiltonComforlidPosition.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    LOADINGDIALOG_CONTROLLER::DisplayDialog_LoadCarrier(l_strCarrierToLoad, l_strLoadingImagePath, Translate(""), 0, ML_STAR, Translate(""), 0);
  }
  l_strCarrierToLoad = Translate("Stack_Carrier");
  l_blnCarrierRequired = Util::Lookup(t_arr_strTemplateIDs_ToLoad, l_strCarrierToLoad, l_intIndexTemplateIDs_ToLoad);
  if (l_blnCarrierRequired == ASWGLOBAL::BOOL::TRUE)
  {
    LOADCARRIER_CONTROLLER::UnloadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad);
    l_strLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("PlateStackerCarrier.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    LOADINGDIALOG_CONTROLLER::DisplayDialog_LoadCarrier(l_strCarrierToLoad, l_strLoadingImagePath, Translate(""), 0, ML_STAR, Translate(""), 0);
    LOADCARRIER_CONTROLLER::LoadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad, Translate(""));
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  l_strCarrierToLoad = Translate("RGT60ml_Carrier01");
  l_blnCarrierRequired = Util::Lookup(t_arr_strTemplateIDs_ToLoad, l_strCarrierToLoad, l_intIndexTemplateIDs_ToLoad);
  if (l_blnCarrierRequired == ASWGLOBAL::BOOL::TRUE)
  {
    LOADCARRIER_CONTROLLER::UnloadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad);
    l_strLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("ReagentContainerCarrier1.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    LOADINGDIALOG_CONTROLLER::DisplayDialog_LoadCarrier(l_strCarrierToLoad, l_strLoadingImagePath, Translate(""), 0, ML_STAR, Translate(""), 0);
    LOADCARRIER_CONTROLLER::LoadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad, Translate(""));
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  l_strCarrierToLoad = Translate("RGT20ml_Carrier01");
  l_blnCarrierRequired = Util::Lookup(t_arr_strTemplateIDs_ToLoad, l_strCarrierToLoad, l_intIndexTemplateIDs_ToLoad);
  if (l_blnCarrierRequired == ASWGLOBAL::BOOL::TRUE)
  {
    LOADCARRIER_CONTROLLER::UnloadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad);
    l_strLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("ReagentContainerCarrier2.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    LOADINGDIALOG_CONTROLLER::DisplayDialog_LoadCarrier(l_strCarrierToLoad, l_strLoadingImagePath, Translate(""), 0, ML_STAR, Translate(""), 0);
    LOADCARRIER_CONTROLLER::LoadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad, Translate(""));
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  l_strCarrierToLoad = Translate("Tubes24_Carrier01");
  l_intSize=l_arr_strReagentNameTubes24.GetSize();
  if (l_intSize > 0)
  {
    LOADCARRIER_CONTROLLER::UnloadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad);
    l_strLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("CarrierVial24.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    LOADINGDIALOG_CONTROLLER::DisplayDialog_LoadList_SingleStep(Translate("Load Vial Carrier"), l_strLoadingImagePath, Translate(""), 0, Translate(""), 1, Translate("Reagent"), l_arr_strReagentNameTubes24, Translate("Volume"), l_arr_strVolumeTubes24, Translate("Tube Type"), l_arr_strTubeType24);
    LOADCARRIER_CONTROLLER::LoadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad, Translate(""));
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  l_blnCarrierRequired = Util::Lookup(t_arr_strTemplateIDs_ToLoad, l_strCarrierToLoad, l_intIndexTemplateIDs_ToLoad);
  if (l_blnCarrierRequired == ASWGLOBAL::BOOL::TRUE)
  {
    LOADCARRIER_CONTROLLER::UnloadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad);
    l_strLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("CarrierVial24.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    LOADINGDIALOG_CONTROLLER::DisplayDialog_LoadCarrier(l_strCarrierToLoad, l_strLoadingImagePath, Translate(""), 0, ML_STAR, Translate(""), 0);
    LOADCARRIER_CONTROLLER::LoadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad, Translate(""));
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  l_strCarrierToLoad = Translate("Tubes32_Carrier01");
  l_intSize=l_arr_strReagentNameTubes32_1.GetSize();
  if (l_intSize > 0)
  {
    LOADCARRIER_CONTROLLER::UnloadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad);
    l_strLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("CarrierVial32_1.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    LOADINGDIALOG_CONTROLLER::DisplayDialog_LoadList_SingleStep(Translate("Load Vial Carrier"), l_strLoadingImagePath, Translate(""), 0, Translate(""), 1, Translate("Reagent"), l_arr_strReagentNameTubes32_1, Translate("Volume"), l_arr_strVolumeTubes32_1, Translate("Tube Type"), l_arr_strTubeType32_1);
    LOADCARRIER_CONTROLLER::LoadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad, Translate(""));
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  l_blnCarrierRequired = Util::Lookup(t_arr_strTemplateIDs_ToLoad, l_strCarrierToLoad, l_intIndexTemplateIDs_ToLoad);
  if (l_blnCarrierRequired == ASWGLOBAL::BOOL::TRUE)
  {
    LOADCARRIER_CONTROLLER::UnloadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad);
    l_strLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("CarrierVial32_1.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    LOADINGDIALOG_CONTROLLER::DisplayDialog_LoadCarrier(l_strCarrierToLoad, l_strLoadingImagePath, Translate(""), 0, ML_STAR, Translate(""), 0);
    LOADCARRIER_CONTROLLER::LoadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad, Translate(""));
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  l_strCarrierToLoad = Translate("Tubes32_Carrier02");
  l_blnCarrierRequired = Util::Lookup(t_arr_strTemplateIDs_ToLoad, l_strCarrierToLoad, l_intIndexTemplateIDs_ToLoad);
  if (l_blnCarrierRequired == ASWGLOBAL::BOOL::TRUE)
  {
    LOADCARRIER_CONTROLLER::UnloadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad);
    l_strLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("CarrierVial32_2.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    LOADINGDIALOG_CONTROLLER::DisplayDialog_LoadCarrier(l_strCarrierToLoad, l_strLoadingImagePath, Translate(""), 0, ML_STAR, Translate(""), 0);
    LOADCARRIER_CONTROLLER::LoadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad, Translate(""));
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  l_strCarrierToLoad = Translate("Processing_Carrier");
  l_blnCarrierRequired = Util::Lookup(t_arr_strTemplateIDs_ToLoad, l_strCarrierToLoad, l_intIndexTemplateIDs_ToLoad);
  if (l_blnCarrierRequired == ASWGLOBAL::BOOL::TRUE)
  {
    LOADCARRIER_CONTROLLER::UnloadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad);
    l_strLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("PlateTipCarrierMOA.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    LOADINGDIALOG_CONTROLLER::DisplayDialog_LoadCarrier(l_strCarrierToLoad, l_strLoadingImagePath, Translate(""), 0, ML_STAR, Translate(""), 0);
    LOADCARRIER_CONTROLLER::LoadCarrierByCarrierID(ML_STAR, l_strCarrierToLoad, Translate(""));
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  l_strCarrierToLoad = Translate("HHS_Carrier01");
  l_blnCarrierRequired = Util::Lookup(t_arr_strTemplateIDs_ToLoad, l_strCarrierToLoad, l_intIndexTemplateIDs_ToLoad);
  if (l_blnCarrierRequired == ASWGLOBAL::BOOL::TRUE)
  {
    l_strLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("HHS_HSP_PipettePosition.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    LOADINGDIALOG_CONTROLLER::DisplayDialog_LoadCarrier(l_strCarrierToLoad, l_strLoadingImagePath, Translate(""), 0, ML_STAR, Translate(""), 0);
  }
  l_intSize=l_arr_strReagentNameTubesCPAC.GetSize();
  if (l_intSize > 0)
  {
    l_strLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("CPACCarrier.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    l_strSubLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("CPAC_Adapter_Numeric.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    LOADINGDIALOG_CONTROLLER::DisplayDialog_LoadList_SingleStep(Translate("Load CPAC"), l_strLoadingImagePath, l_strSubLoadingImagePath, 0, Translate(""), 1, Translate("Reagent"), l_arr_strReagentNameTubesCPAC, Translate("Volume"), l_arr_strVolumeTubesCPAC, Translate("Tube Type"), l_arr_strTubeTypeCPAC);
  }
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  LOADINGDIALOG_CONTROLLER::DisplayDialog_Information(Translate("Deck loading completed. Press OK to start the run."), Translate(""), 0, Translate(""), 0);
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strMethodName, Translate(""));
}

private function __ReviewORReloadStockOfTips( variable i_intNumberOfTip50_required, variable i_intNumberOfTip300_required, variable i_intNumberOfTip1000_required ) void {
  private variable l_intRemainingTips1000;
  private variable l_intRemainingTips300;
  private variable l_intRemainingTips50;
  private variable l_strMessageReloadTips;
  private variable l_strFunctionName;
  private variable l_intGetTotalTip50;
  private variable l_intGetTotalTip300;
  private variable l_intGetTotalTip1000;
  private sequence l_seqTip50;
  private sequence l_seqTip1000;
  private sequence l_seqTip300;
  private variable l_strLoadingImagePath;
  private variable l_strNumberOfTip50_required;
  private variable l_strNumberOfTip1000_required;
  private variable l_strNumberOfTip300_required;
  private variable l_blnTipReloadRequired;
  private variable l_blnPostponedReloadRequired;
  private variable l_strNumberOfTip50_remaining;
  private variable l_strNumberOfTip1000_remaining;
  private variable l_strNumberOfTip300_remaining;
  private variable l_arr_strTipType[];
  private variable l_arr_strRequiredTips[];
  private variable l_arr_strRemainingTips[];
  private variable l_strMessagePostponedTipLoading;
  private variable IndexReloadTips;
  private variable l_intSkipTipReload;
  private variable l_blnReturn;
  l_strFunctionName = Translate("");
  l_strFunctionName = GetFunctionName();
  DATA_CONTROLLER::Start_Function(l_strFunctionName, ASWGLOBAL::BOOL::FALSE);
  {
    IndexReloadTips = 0;
    while (1 == 1)
    {
      IndexReloadTips = IndexReloadTips + 1;
      TIPMANAGEMENTLIBRARY::Counter_GetSequenceFromName(t_strTipCounterNameTip50, l_seqTip50);
      TIPMANAGEMENTLIBRARY::Counter_GetSequenceFromName(t_strTipCounterNameTip300, l_seqTip300);
      TIPMANAGEMENTLIBRARY::Counter_GetSequenceFromName(t_strTipCounterNameTip1000, l_seqTip1000);
      l_intGetTotalTip50 = SeqGetTotal(l_seqTip50);
      l_intGetTotalTip300 = SeqGetTotal(l_seqTip300);
      l_intGetTotalTip1000 = SeqGetTotal(l_seqTip1000);
      TIPMANAGEMENTLIBRARY::Counter_GetNumberOfRemainingTips(t_strTipCounterNameTip50, l_intRemainingTips50);
      TIPMANAGEMENTLIBRARY::Counter_GetNumberOfRemainingTips(t_strTipCounterNameTip300, l_intRemainingTips300);
      TIPMANAGEMENTLIBRARY::Counter_GetNumberOfRemainingTips(t_strTipCounterNameTip1000, l_intRemainingTips1000);
      TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("Number of required tips of tip counter: "), t_strTipCounterNameTip50, Translate(" are: "), i_intNumberOfTip50_required, Translate(""), Translate(""));
      TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("Number of remaining tips in tip counter: "), t_strTipCounterNameTip50, Translate(" are: "), l_intRemainingTips50, Translate(""), Translate(""));
      TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("Number of available positions in tip counter: "), t_strTipCounterNameTip50, Translate(" are: "), l_intGetTotalTip50, Translate(""), Translate(""));
      TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("Number of required tips of tip counter: "), t_strTipCounterNameTip300, Translate(" are: "), i_intNumberOfTip300_required, Translate(""), Translate(""));
      TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("Number of remaining tips in tip counter: "), t_strTipCounterNameTip300, Translate(" are: "), l_intRemainingTips300, Translate(""), Translate(""));
      TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("Number of available positions in tip counter: "), t_strTipCounterNameTip300, Translate(" are: "), l_intGetTotalTip300, Translate(""), Translate(""));
      TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("Number of required tips of tip counter: "), t_strTipCounterNameTip1000, Translate(" are: "), i_intNumberOfTip1000_required, Translate(""), Translate(""));
      TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("Number of remaining tips in tip counter: "), t_strTipCounterNameTip1000, Translate(" are: "), l_intRemainingTips1000, Translate(""), Translate(""));
      TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("Number of available positions in tip counter: "), t_strTipCounterNameTip1000, Translate(" are: "), l_intGetTotalTip1000, Translate(""), Translate(""));
      l_blnTipReloadRequired = ASWGLOBAL::BOOL::FALSE;
      l_blnPostponedReloadRequired = ASWGLOBAL::BOOL::FALSE;
      if (l_intRemainingTips50 < i_intNumberOfTip50_required)
      {
        if (l_intRemainingTips50 != l_intGetTotalTip50)
        {
          l_blnTipReloadRequired = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          l_blnPostponedReloadRequired = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (l_intRemainingTips300 < i_intNumberOfTip300_required)
      {
        if (l_intRemainingTips300 != l_intGetTotalTip300)
        {
          l_blnTipReloadRequired = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          l_blnPostponedReloadRequired = ASWGLOBAL::BOOL::TRUE;
        }
      }
      if (l_intRemainingTips1000 < i_intNumberOfTip1000_required)
      {
        if (l_intRemainingTips1000 != l_intGetTotalTip1000)
        {
          l_blnTipReloadRequired = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          l_blnPostponedReloadRequired = ASWGLOBAL::BOOL::TRUE;
        }
      }
      l_arr_strTipType.SetSize(0);
      l_arr_strRequiredTips.SetSize(0);
      l_arr_strRemainingTips.SetSize(0);
      if (l_blnTipReloadRequired == ASWGLOBAL::BOOL::TRUE)
      {
        if (IndexReloadTips >= 2)
        {
          LOADINGDIALOG_CONTROLLER::DisplayDialog_Question(Translate("You have loaded fewer tips than are required for the next process.\n\nPress 'YES' to continue the run nevertheless.\nPress 'NO' to reload more tips. "), Translate(""), l_intSkipTipReload, Translate(""), 0);
          if (l_intSkipTipReload == 6)
          {
            break;
          }
        }
        if (i_intNumberOfTip50_required > 0)
        {
          l_arr_strTipType.AddAsLast(t_strTipCounterNameTip50);
          l_strNumberOfTip50_required = StrIStr(i_intNumberOfTip50_required);
          l_arr_strRequiredTips.AddAsLast(l_strNumberOfTip50_required);
          l_strNumberOfTip50_remaining = StrIStr(l_intRemainingTips50);
          l_arr_strRemainingTips.AddAsLast(l_strNumberOfTip50_remaining);
        }
        if (i_intNumberOfTip300_required > 0)
        {
          l_arr_strTipType.AddAsLast(t_strTipCounterNameTip300);
          l_strNumberOfTip300_required = StrIStr(i_intNumberOfTip300_required);
          l_arr_strRequiredTips.AddAsLast(l_strNumberOfTip300_required);
          l_strNumberOfTip300_remaining = StrIStr(l_intRemainingTips300);
          l_arr_strRemainingTips.AddAsLast(l_strNumberOfTip300_remaining);
        }
        if (i_intNumberOfTip1000_required > 0)
        {
          l_arr_strTipType.AddAsLast(t_strTipCounterNameTip1000);
          l_strNumberOfTip1000_required = StrIStr(i_intNumberOfTip1000_required);
          l_arr_strRequiredTips.AddAsLast(l_strNumberOfTip1000_required);
          l_strNumberOfTip1000_remaining = StrIStr(l_intRemainingTips1000);
          l_arr_strRemainingTips.AddAsLast(l_strNumberOfTip1000_remaining);
        }
        l_strMessageReloadTips = StrConcat4(Translate("Tip reloading step required - Please reload tips according to the information in the table below."), Translate("\n\nPlease load at least the indicated amount of tips onto the tip carriers.\nIf more tips are required than can be loaded on deck, please fill up all available positions."), Translate("\n\nIn addition, you might want to take this opportunity to restock all tip types\n(indicated tip amounts are only sufficient for the next process)."), Translate(""));
        l_strLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("Tips.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        LOADINGDIALOG_CONTROLLER::DisplayDialog_LoadList_SingleStep(l_strMessageReloadTips, l_strLoadingImagePath, Translate(""), 0, Translate(""), 0, Translate("Tip Type"), l_arr_strTipType, Translate("Required Tips (Next Process)"), l_arr_strRequiredTips, Translate("Remaining Tips"), l_arr_strRemainingTips);
        l_arr_strRequiredTips = HSLExtensions::Array::ConvertToIntegerArray(l_arr_strRequiredTips, l_blnReturn);
        if (i_intNumberOfTip50_required > 0&& i_intNumberOfTip300_required > 0&& i_intNumberOfTip1000_required > 0)
        {
          intReturnValueDialog = TIPMANAGEMENTLIBRARY::Edit_ShowTipEditDialogMultipleSequences(ML_STAR, l_arr_strTipType, l_arr_strRequiredTips, 0);
          if (intReturnValueDialog == TIP_TOOLS::ReturnCode::TipEditDialogCancelled)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("intReturnValueDialog: "), intReturnValueDialog);
            abort;
          }
        }
        else
        {
          if (t_intRequiredNumberOf50uLTips_Total > 0)
          {
            intReturnValueDialog = TIPMANAGEMENTLIBRARY::Edit_ShowTipEditDialog(ML_STAR, t_strTipCounterNameTip50, i_intNumberOfTip50_required, 0);
            if (intReturnValueDialog == TIP_TOOLS::ReturnCode::TipEditDialogCancelled)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("intReturnValueDialog: "), intReturnValueDialog);
              abort;
            }
          }
          if (t_intRequiredNumberOf300uLTips_Total > 0)
          {
            intReturnValueDialog = TIPMANAGEMENTLIBRARY::Edit_ShowTipEditDialog(ML_STAR, t_strTipCounterNameTip300, i_intNumberOfTip300_required, 0);
            if (intReturnValueDialog == TIP_TOOLS::ReturnCode::TipEditDialogCancelled)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("intReturnValueDialog: "), intReturnValueDialog);
              abort;
            }
          }
          if (t_intRequiredNumberOf1000uLTips_Total > 0)
          {
            intReturnValueDialog = TIPMANAGEMENTLIBRARY::Edit_ShowTipEditDialog(ML_STAR, t_strTipCounterNameTip1000, i_intNumberOfTip1000_required, 0);
            if (intReturnValueDialog == TIP_TOOLS::ReturnCode::TipEditDialogCancelled)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("intReturnValueDialog: "), intReturnValueDialog);
              abort;
            }
          }
        }
        DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Re-load tip carriers"), ASWGLOBAL::BOOL::TRUE);
        LOADCARRIER_CONTROLLER::UnloadTipCarrierByTipCounterNames(ML_STAR, l_arr_strTipType);
        LOADCARRIER_CONTROLLER::LoadTipCarrierByTipCounterNames(ML_STAR, l_arr_strTipType, ASWGLOBAL::BOOL::TRUE);
      }
      else
      {
        MECC::TraceComment(Translate("The system checked the amout of tips and the stock is equal or higher than the requested amount of tips. No reloading event will be triggered."));
        break;
      }
    }
  }
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  if (l_blnPostponedReloadRequired == ASWGLOBAL::BOOL::TRUE)
  {
    l_strMessagePostponedTipLoading = StrConcat4(Translate("Postponed tip reloading step required."), Translate(""), Translate("\n\nAt least one tip type requires more tips than can be loaded to the deck and the available positions are already filled up."), Translate("\n\nA tip reloading step will be required later in this process."));
    LOADINGDIALOG_CONTROLLER::DisplayDialog_Information(l_strMessagePostponedTipLoading, Translate(""), 0, Translate(""), 0);
  }
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strMethodName, Translate(""));
}

private function __RunODTCProtocol( variable i_strODTCProtocolName, variable i_intIncubationDuration, variable i_strDialogMessage ) void {
  private variable l_strFunctionName;
  private variable l_str_DateTimeNow;
  private variable l_strMessageDialog;
  private variable l_strMessageReportFile;
  private timer IncubateOnODTC;
  private variable l_intTimeForProtocol_Hours;
  private variable l_intTimeForProtocol_Seconds;
  private variable l_intTimeForProtocol_Minutes;
  l_strFunctionName = Translate("");
  l_strFunctionName = GetFunctionName();
  DATA_CONTROLLER::Start_Function(l_strFunctionName, ASWGLOBAL::BOOL::FALSE);
  DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Transport samples to ODTC"), ASWGLOBAL::BOOL::TRUE);
  INHECOODTC_CONTROLLER::ODTC_OpenDoor(t_intDeviceNumberODTC);
  INHECOODTC_CONTROLLER::ODTC_CloseDoor(t_intDeviceNumberODTC);
  l_strMessageReportFile = StrConcat2(Translate("-Run program on the ODTC: "), i_strODTCProtocolName);
  DATA_CONTROLLER::Reportfile_UpdateData(l_strMessageReportFile, ASWGLOBAL::BOOL::TRUE);
  INHECOODTC_CONTROLLER::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, i_strODTCProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::TRUE);
  HSLTime::GetDateTimeNow(l_str_DateTimeNow);
  if (i_intIncubationDuration != 0)
  {
    if (i_intIncubationDuration >= 3600)
    {
      l_intTimeForProtocol_Seconds = i_intIncubationDuration % 60;
      l_intTimeForProtocol_Hours = i_intIncubationDuration - l_intTimeForProtocol_Seconds;
      l_intTimeForProtocol_Hours = l_intTimeForProtocol_Hours / 60;
      l_intTimeForProtocol_Minutes = l_intTimeForProtocol_Hours % 60;
      l_intTimeForProtocol_Hours = l_intTimeForProtocol_Hours - l_intTimeForProtocol_Minutes;
      l_intTimeForProtocol_Hours = l_intTimeForProtocol_Hours / 60;
      l_strMessageDialog = StrConcat12(Translate("\nRun ODTC protocol '"), i_strODTCProtocolName, Translate("'\n       Protocol was started at "), l_str_DateTimeNow, Translate("\n       The protocol will run for "), Translate(""), l_intTimeForProtocol_Hours, Translate("h "), l_intTimeForProtocol_Minutes, Translate("m "), l_intTimeForProtocol_Seconds, Translate("s"));
    }
    else
    {
      if (i_intIncubationDuration >= 60)
      {
        l_intTimeForProtocol_Seconds = i_intIncubationDuration % 60;
        l_intTimeForProtocol_Minutes = i_intIncubationDuration - l_intTimeForProtocol_Seconds;
        l_intTimeForProtocol_Minutes = l_intTimeForProtocol_Minutes / 60;
        l_strMessageDialog = StrConcat12(Translate("\nRun ODTC protocol '"), i_strODTCProtocolName, Translate("'\n       Protocol was started at "), l_str_DateTimeNow, Translate("\n       The protocol will run for "), Translate(""), Translate(""), Translate(""), l_intTimeForProtocol_Minutes, Translate("m "), l_intTimeForProtocol_Seconds, Translate("s"));
      }
      else
      {
        l_strMessageDialog = StrConcat12(Translate("\nRun ODTC protocol '"), i_strODTCProtocolName, Translate("'\n       Protocol was started at "), l_str_DateTimeNow, Translate("\n       The protocol will run for "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), i_intIncubationDuration, Translate("s"));
      }
    }
    if (i_strDialogMessage != "")
    {
      l_strMessageDialog = StrConcat4(l_strMessageDialog, Translate("\n       "), i_strDialogMessage, Translate(""));
    }
    VectorCustomDialogs::AppendStatusText(l_strMessageDialog);
    DATA_CONTROLLER::Timer_Incubation(IncubateOnODTC, i_intIncubationDuration, 1);
  }
  else
  {
    if (t_intTimeForProtocol >= 3600)
    {
      l_intTimeForProtocol_Seconds = t_intTimeForProtocol % 60;
      l_intTimeForProtocol_Hours = t_intTimeForProtocol - l_intTimeForProtocol_Seconds;
      l_intTimeForProtocol_Hours = l_intTimeForProtocol_Hours / 60;
      l_intTimeForProtocol_Minutes = l_intTimeForProtocol_Hours % 60;
      l_intTimeForProtocol_Hours = l_intTimeForProtocol_Hours - l_intTimeForProtocol_Minutes;
      l_intTimeForProtocol_Hours = l_intTimeForProtocol_Hours / 60;
      l_strMessageDialog = StrConcat12(Translate("\nRun ODTC protocol '"), i_strODTCProtocolName, Translate("'\n       Protocol was started at "), l_str_DateTimeNow, Translate("\n       The protocol will run for "), Translate(""), l_intTimeForProtocol_Hours, Translate("h "), l_intTimeForProtocol_Minutes, Translate("m "), l_intTimeForProtocol_Seconds, Translate("s"));
    }
    else
    {
      if (t_intTimeForProtocol >= 60)
      {
        l_intTimeForProtocol_Seconds = t_intTimeForProtocol % 60;
        l_intTimeForProtocol_Minutes = t_intTimeForProtocol - l_intTimeForProtocol_Seconds;
        l_intTimeForProtocol_Minutes = l_intTimeForProtocol_Minutes / 60;
        l_strMessageDialog = StrConcat12(Translate("\nRun ODTC protocol '"), i_strODTCProtocolName, Translate("'\n       Protocol was started at "), l_str_DateTimeNow, Translate("\n       The protocol will run for "), Translate(""), Translate(""), Translate(""), l_intTimeForProtocol_Minutes, Translate("m "), l_intTimeForProtocol_Seconds, Translate("s"));
      }
      else
      {
        l_strMessageDialog = StrConcat12(Translate("\nRun ODTC protocol '"), i_strODTCProtocolName, Translate("'\n       Protocol was started at "), l_str_DateTimeNow, Translate("\n       The protocol will run for "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_intTimeForProtocol, Translate("s"));
      }
    }
    if (i_strDialogMessage != "")
    {
      l_strMessageDialog = StrConcat4(l_strMessageDialog, Translate("\n       "), i_strDialogMessage, Translate(""));
    }
    VectorCustomDialogs::AppendStatusText(l_strMessageDialog);
  }
  DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Retrieve samples from ODTC"), ASWGLOBAL::BOOL::TRUE);
  t_bln_ODTCHasBeenUsed = ASWGLOBAL::BOOL::TRUE;
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strMethodName, Translate(""));
}

private function __ExternalThermalcycling( variable i_strCarrierName, variable i_strMessageExternalThermalCycling_1, variable i_strMessageExternalThermalCycling_2, variable i_strLoadingImagePath ) void {
  private variable l_strFunctionName;
  l_strFunctionName = Translate("");
  l_strFunctionName = GetFunctionName();
  DATA_CONTROLLER::Start_Function(l_strFunctionName, ASWGLOBAL::BOOL::FALSE);
  DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Retrieve sample plate for external thermal cycling"), ASWGLOBAL::BOOL::TRUE);
  LOADCARRIER_CONTROLLER::UnloadCarrierByCarrierID(ML_STAR, i_strCarrierName);
  LOADINGDIALOG_CONTROLLER::DisplayDialog_Information(i_strMessageExternalThermalCycling_1, i_strLoadingImagePath, 0, Translate(""), 0);
  LOADCARRIER_CONTROLLER::LoadCarrierByCarrierID(ML_STAR, i_strCarrierName, Translate(""));
  TIPMANAGEMENTLIBRARY::Channel_DefragmentTipSequence(ML_STAR, t_strTipCounterNameTip300, TIP_TOOLS::DefragmentationDirection::ColumnWise);
  ML_STAR._13722C3E_1C8F_4237_BFAF_A7CE81549723("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"); // WaitForTadmUpload
  LOADINGDIALOG_CONTROLLER::DisplayDialog_Information(Translate("Click OK to unload processing carrier"), i_strLoadingImagePath, 0, Translate(""), 0);
  LOADCARRIER_CONTROLLER::UnloadCarrierByCarrierID(ML_STAR, i_strCarrierName);
  LOADINGDIALOG_CONTROLLER::DisplayDialog_Information(i_strMessageExternalThermalCycling_2, i_strLoadingImagePath, 0, Translate(""), 0);
  LOADCARRIER_CONTROLLER::LoadCarrierByCarrierID(ML_STAR, i_strCarrierName, Translate(""));
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strMethodName, Translate(""));
}

private function _LoadVariableHelper(  ) void {
  t_intNumberOfIntermediatePlateWells = 0;
  //Assign the number of intermediate plate wells based on the number of input samples.  Written in HSL to maximize compatibility with Venus versions < 6
  if(t_intNumberOfSamplesFromFile == 8)  t_intNumberOfIntermediatePlateWells = 1;
  if(t_intNumberOfSamplesFromFile == 16) t_intNumberOfIntermediatePlateWells = 4;
  if(t_intNumberOfSamplesFromFile == 24) t_intNumberOfIntermediatePlateWells = 4;
  if(t_intNumberOfSamplesFromFile == 32) t_intNumberOfIntermediatePlateWells = 8;
  if(t_intNumberOfSamplesFromFile == 40) t_intNumberOfIntermediatePlateWells = 8;
  if(t_intNumberOfSamplesFromFile == 48) t_intNumberOfIntermediatePlateWells = 8;
  if(t_intNumberOfSamplesFromFile == 56) t_intNumberOfIntermediatePlateWells = 8;
  if(t_intNumberOfSamplesFromFile == 64) t_intNumberOfIntermediatePlateWells = 16;
  if(t_intNumberOfSamplesFromFile == 72) t_intNumberOfIntermediatePlateWells = 16;
  if(t_intNumberOfSamplesFromFile == 80) t_intNumberOfIntermediatePlateWells = 16;
  if(t_intNumberOfSamplesFromFile == 88) t_intNumberOfIntermediatePlateWells = 24;
  if(t_intNumberOfSamplesFromFile == 96) t_intNumberOfIntermediatePlateWells = 24;
  t_intNumberOfSouceTubes = 0;
  //Assign the number of source tubes based on the number of input samples.  Written in HSL to maximize compatibility with Venus versions < 6
  if(     t_intNumberOfSamplesFromFile <= 24) t_intNumberOfSouceTubes = 1;
  else if(t_intNumberOfSamplesFromFile <= 48) t_intNumberOfSouceTubes = 2;
  else if(t_intNumberOfSamplesFromFile <= 72) t_intNumberOfSouceTubes = 3;
  else if(t_intNumberOfSamplesFromFile <= 96) t_intNumberOfSouceTubes = 4;
  t_fltVolumeDeadPercentOfLiquidTransfer = 5.0;
  t_fltVolumeMaxOfDWP = 250000.0;
  t_fltVolumeDeadOfDWP = 60000.0;
  t_fltVolumeMaxOfIntermediatePlate = 800.0;
  t_fltVolumeDeadOfIntermediatePlate = 40.0;
  t_fltVolumeDeadOfSPRIselectPlate = 60.0;
  t_fltVolumeMaxOf50mLTrough = 50000.0;
  t_fltVolumeDeadOf50mLTrough = 3000.0;
  t_strTroughName50mL = Translate("50 mL Trough");
  t_fltVolumeMaxOf20mLTrough = 20000.0;
  t_fltVolumeDeadOf20mLTrough = 1000.0;
  t_strTroughName20mL = Translate("20 mL Trough");
  t_fltVolumeMaxOf10mLTube = 10000.0;
  t_fltVolumeDeadOf10mLTube = 200.0;
  t_strTubeName10mL = Translate("10 mL Tube");
  t_fltVolumeMaxOf5mLTube = 5000.0;
  t_fltVolumeDeadOf5mLTube = 50.0;
  t_strTubeName5mL = Translate("5 mL Tube");
  t_fltVolumeMaxOf2mLTube = 2000.0;
  t_fltVolumeDeadOf2mLTube = 60.0;
  t_strTubeName2mL = Translate("2 mL Tube");
  t_fltVolumeMaxOfDot5mLTube = 500.0;
  t_fltVolumeDeadOfDot5mLTube = 20.0;
  t_strTubeNameDot5mL = Translate("0.5 mL Tube");
}

private function Process01_FragERAT(  ) void {
  private variable l_strLoadingImagePath;
  private sequence l_trpLidSequence;
  private variable l_intCurrentPosition;
  private variable l_fltFixedHeight;
  private variable l_arr_fltMix[];
  private variable l_strMessageExternalThermalCycling_1;
  private variable l_strMessageExternalThermalCycling_2;
  t_strFunctionName = GetFunctionName();
  DATA_CONTROLLER::Start_Function(t_strFunctionName, ASWGLOBAL::BOOL::TRUE);
  VENUSTEXTTOSPEECH::Run(t_strFunctionName);
  JSONRUNREPORT::Add_TimeStamp(t_strFunctionName);
  t_fltVolumeTracking = t_fltVolume_Sample;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  __ReviewORReloadStockOfTips(0, t_intRequiredNumberOf300uLTipsProcess01, 0);
  if (t_blnIndexplateLoaded == ASWGLOBAL::BOOL::TRUE&& t_blnIndexPlateSecured == ASWGLOBAL::BOOL::FALSE)
  {
    MECC::TraceComment("Group start - ********** Transport Index **********");
    TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Pipette01, t_trpPCR_HHS01, ASWGLOBAL::BOOL::FALSE, 4, 2);
    t_blnIndexPlateSecured = ASWGLOBAL::BOOL::TRUE;
    MECC::TraceComment("Group end - ********** Transport Index **********");
  }
  if (t_blnMasterMixPlated == ASWGLOBAL::BOOL::FALSE)
  {
    MECC::TraceComment("Group start - ********** Transport MIDI **********");
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_MIDIStack01, t_trpMIDI_CPAC02, ASWGLOBAL::BOOL::TRUE, 4, 2);
    SeqIncrement(t_trpMIDI_MIDIStack01, 1);
    MECC::TraceComment("Group end - ********** Transport MIDI **********");
  }
  MECC::TraceComment("Group start - ********** Plate out reagents to Intermediate MIDI plate **********");
  DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Prepare Fragmentation Mix"), ASWGLOBAL::BOOL::TRUE);
  l_arr_fltMix.SetSize(t_intNumberOfIntermediatePlateWells);
  {//Arrange the mix volume array
    variable i, bucket;
    for(i = 1;i <= t_intNumberOfIntermediatePlateWells;i++){
         bucket = (t_arr_fltVolumeTarget_BufferEB_MM.GetAt(i - 1) + t_arr_fltVolumeTarget_FragmentationBuffer.GetAt(i - 1) + t_arr_fltVolumeTarget_FragmentationEnzyme.GetAt(i - 1)) * 0.7;
         bucket = MthMin(bucket, 300);
         l_arr_fltMix.SetAt(i - 1, bucket);
       }
  }
  PIPETTING_CONTROLLER::PIP_Channels_WithVolumeArray_ExpandedMix(ML_STAR, t_seqBufferEB_FragmentationMix, t_seqIntermediateDispense_FragmentationMix_Create, t_arr_fltVolumeSource_BufferEB_MM, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_BufferEBMM_SE"), 0, 0, t_arr_fltVolumeSource_BufferEB_MM, t_arr_fltVolumeSource_BufferEB_MM, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
  HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
  PIPETTING_CONTROLLER::PIP_Channels_WithVolumeArray_ExpandedMix(ML_STAR, t_seqFragmentationBuffer, t_seqIntermediateDispense_FragmentationMix_Create, t_arr_fltVolumeSource_FragmentationBuffer, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_FragmentationBuffer_SE"), 0, 0, t_arr_fltVolumeSource_FragmentationBuffer, t_arr_fltVolumeSource_FragmentationBuffer, 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
  HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
  TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("l_arr_fltMix, in 킠"), l_arr_fltMix);
  HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
  PIPETTING_CONTROLLER::PIP_Channels_WithVolumeArray_ExpandedMix(ML_STAR, t_seqFragmentationEnzyme, t_seqIntermediateDispense_FragmentationMix_Create, t_arr_fltVolumeSource_FragmentationEnzyme, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_FragmentationEnzyme_SE"), 0, 15, t_arr_fltVolumeSource_FragmentationEnzyme, l_arr_fltMix, 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
  HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
  t_blnMasterMixPlated = ASWGLOBAL::BOOL::TRUE;
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == 0)
  {
    INHECOTEC_CONTROLLER::TEC_SetTemperature(20, t_intDeviceID_CPAC01);
    INHECOTEC_CONTROLLER::TEC_SetTemperature(20, t_intDeviceID_CPAC02);
  }
  MECC::TraceComment("Group end - ********** Plate out reagents to Intermediate MIDI plate **********");
  MECC::TraceComment("Group start - ********** Transport MIDI **********");
  TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_CPAC02, t_trpMIDI_Pipette03, ASWGLOBAL::BOOL::TRUE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport MIDI **********");
  MECC::TraceComment("Group start - ********** Transfer Fragmentation Mix **********");
  l_intCurrentPosition = t_seqIntermediateAspirateChannels_FragmentationMix.GetCurrentPosition();
  l_fltFixedHeight = 3.0;
  if (l_intCurrentPosition > 0)
  {
    HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
    PIPETTING_CONTROLLER::PIP_Channels_ExpandedMix(ML_STAR, t_seqIntermediateAspirateChannels_FragmentationMix, t_seqProcessChannels_FragmentationMix, t_fltVolume_FragmentationMix, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_FragmentationMix_SE"), 1, 15, t_fltVolume_FragmentationMix, 30.0, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
    HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
  }
  l_intCurrentPosition = t_seqIntermediateAspirateMPH_FragmentationMix.GetCurrentPosition();
  if (l_intCurrentPosition > 0)
  {
    PIPETTING_CONTROLLER::PIP_MPH_StampAdvance_ExpandedMix(ML_STAR, t_seqIntermediateAspirateMPH_FragmentationMix, t_seqProcessMPH_FragmentationMix, t_fltVolume_FragmentationMix, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_FragmentationMix_SE"), 1, 15, t_fltVolume_FragmentationMix, 30.0, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltVolume_FragmentationMix;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer Fragmentation Mix **********");
  MECC::TraceComment("Group start - ********** Incubation in ODTC **********");
  if (t_blnExternalThermalcycling == ASWGLOBAL::BOOL::FALSE)
  {
    SeqCopySequence(l_trpLidSequence, t_trpLid_Waste_inverted);
    __WaitODTCProtocolAsync_NoTransport(Translate(""));
    t_intIndexODTCMethod = 2;
    __RunODTCProtocolAsync(t_trpPCR_Pipette02, t_trpLid_LidStack01, t_trpPCR_ODTC, t_trpLid_ODTC, t_trpPCR_Pipette02, t_arrODTCProtocols.ElementAt( t_intIndexODTCMethod -1), 0, Translate(""));
    SeqIncrement(t_trpLid_LidStack01, 1);
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_CPAC02, ASWGLOBAL::BOOL::TRUE, 4, 2);
    TIPMANAGEMENTLIBRARY::Channel_DefragmentTipSequence(ML_STAR, t_strTipCounterNameTip300, TIP_TOOLS::DefragmentationDirection::ColumnWise);
    ML_STAR._13722C3E_1C8F_4237_BFAF_A7CE81549723("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"); // WaitForTadmUpload
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == 0)
    {
      __WaitODTCProtocolAsync(t_trpPCR_ODTC, t_trpLid_ODTC, t_trpPCR_Pipette02, l_trpLidSequence);
      t_intIndexODTCMethod = 5;
      INHECOODTC_CONTROLLER::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, t_arrODTCProtocols.ElementAt( t_intIndexODTCMethod -1), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
  }
  else
  {
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_CPAC02, ASWGLOBAL::BOOL::TRUE, 4, 2);
    l_strMessageExternalThermalCycling_1 = StrConcat12(Translate("External Fragmentation, End Repair, and A-Tailing."), Translate("\n\n"), Translate("- Please retrieve the sample plate from position 2 of the processing carrier."), Translate(""), Translate("\n\n"), Translate(""), Translate(""), Translate(""), Translate("- Press OK to reload the processing carrier while external incubation is performed."), Translate(""), Translate("\n\n"), Translate("CANCEL will abort the run"));
    l_strMessageExternalThermalCycling_2 = StrConcat12(Translate("External Fragmentation, End Repair, and A-Tailing."), Translate("\n\n"), Translate("- Please replace the sample plate to position 2 of the processing carrier."), Translate(""), Translate("\n\n"), Translate(""), Translate(""), Translate(""), Translate("- Press OK to continue the method."), Translate(""), Translate("\n\n"), Translate("CANCEL will abort the run"));
    l_strLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("PlateTipCarrierMOA.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    __ExternalThermalcycling(Translate("Processing_Carrier"), l_strMessageExternalThermalCycling_1, l_strMessageExternalThermalCycling_2, l_strLoadingImagePath);
  }
  MECC::TraceComment("Group end - ********** Incubation in ODTC **********");
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strMethodName, Translate(""));
}

private function Process02_PostFragSPRIselection(  ) void {
  private variable l_fltVolumeMix;
  private variable l_intCurrentPosition;
  private sequence l_trpLidSequence;
  private timer l_hdlTimer;
  private variable l_strError;
  private variable l_fltFixedHeight;
  private variable l_fltRestHeight;
  t_strFunctionName = GetFunctionName();
  DATA_CONTROLLER::Start_Function(t_strFunctionName, ASWGLOBAL::BOOL::TRUE);
  VENUSTEXTTOSPEECH::Run(t_strFunctionName);
  JSONRUNREPORT::Add_TimeStamp(t_strFunctionName);
  t_fltVolumeTracking = t_fltVolume_Sample + t_fltVolume_FragmentationMix;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  __ReviewORReloadStockOfTips(0, t_intRequiredNumberOf300uLTipsProcess02, 0);
  if (t_blnIndexplateLoaded == ASWGLOBAL::BOOL::TRUE&& t_blnIndexPlateSecured == ASWGLOBAL::BOOL::FALSE)
  {
    MECC::TraceComment("Group start - ********** Transport Index **********");
    TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Pipette01, t_trpPCR_HHS01, ASWGLOBAL::BOOL::FALSE, 4, 2);
    t_blnIndexPlateSecured = ASWGLOBAL::BOOL::TRUE;
    MECC::TraceComment("Group end - ********** Transport Index **********");
    MECC::TraceComment("Group start - ********** Transport PCR **********");
    TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_PCRStack01, t_trpPCR_Pipette01, ASWGLOBAL::BOOL::FALSE, 4, 2);
    SeqIncrement(t_trpPCR_PCRStack01, 1);
    MECC::TraceComment("Group end - ********** Transport PCR **********");
  }
  else
  {
    MECC::TraceComment("Group start - ********** Transport PCR **********");
    TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_PCRStack01, t_trpPCR_Pipette01, ASWGLOBAL::BOOL::FALSE, 4, 2);
    SeqIncrement(t_trpPCR_PCRStack01, 1);
    MECC::TraceComment("Group end - ********** Transport PCR **********");
  }
  if (t_blnSPRIselectAndBufferEBplated == ASWGLOBAL::BOOL::FALSE)
  {
    MECC::TraceComment("Group start - ********** Transport MIDI **********");
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_MIDIStack01, t_trpMIDI_Pipette03, ASWGLOBAL::BOOL::TRUE, 4, 2);
    SeqIncrement(t_trpMIDI_MIDIStack01, 1);
    MECC::TraceComment("Group end - ********** Transport MIDI **********");
    MECC::TraceComment("Group start - ********** Plate out Buffer EB to Intermediate MIDI plate **********");
    DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Prepare Buffer EB plate"), ASWGLOBAL::BOOL::TRUE);
    PIPETTING_CONTROLLER::PIP_Channels(ML_STAR, t_seqBufferEB, t_seqIntermediateDispense_BufferEB, t_arr_fltVolumeSource_BufferEB.ElementAt( 1 -1), Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_BufferEBPlate_JE"), 0, 0, 0, 0, 20.0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, 0);
    MECC::TraceComment("Group end - ********** Plate out Buffer EB to Intermediate MIDI plate **********");
    MECC::TraceComment("Group start - ********** Transport MIDI **********");
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_HHS05, ASWGLOBAL::BOOL::FALSE, 4, 2);
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_MIDIStack01, t_trpMIDI_Pipette03, ASWGLOBAL::BOOL::TRUE, 4, 2);
    SeqIncrement(t_trpMIDI_MIDIStack01, 1);
    MECC::TraceComment("Group end - ********** Transport MIDI **********");
    MECC::TraceComment("Group start - ********** Plate out SPRIselect to Intermediate MIDI plate **********");
    DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Prepare SPRI plate"), ASWGLOBAL::BOOL::TRUE);
    l_fltVolumeMix = t_arr_fltVolumeTubes_SPRIselect.ElementAt( 1 -1) * 0.7 / (8 * 1.0);
    l_fltVolumeMix = MthMin(l_fltVolumeMix, 300.0);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("Volume base: "), t_arr_fltVolumeTubes_SPRIselect.ElementAt( 1 -1), Translate(" --- "), Translate("calc mix volume:"), l_fltVolumeMix, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    PIPETTING_CONTROLLER::PIP_Channels_MixBeadsByOverturn(ML_STAR, t_seqSPRItrough, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_SPRImix_SE"), 5, 5, 50.0, l_fltVolumeMix, 3.0, 3.0, 3.0, l_strError);
    PIPETTING_CONTROLLER::PIP_Channels(ML_STAR, t_seqSPRIselect, t_seqIntermediateDispense_SPRIselect, t_arr_fltVolumeSource_SPRIselect.ElementAt( 1 -1), Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_SPRIBlowout_SE"), 10, t_arr_fltVolumeSource_SPRIselect.ElementAt( 1 -1), 0, 0, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
    t_blnSPRIselectAndBufferEBplated = ASWGLOBAL::BOOL::TRUE;
    MECC::TraceComment("Group end - ********** Plate out SPRIselect to Intermediate MIDI plate **********");
    MECC::TraceComment("Group start - ********** Transport MIDI **********");
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_CPAC03, ASWGLOBAL::BOOL::TRUE, 4, 2);
    MECC::TraceComment("Group end - ********** Transport MIDI **********");
  }
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == 1)
  {
    SeqCopySequence(l_trpLidSequence, t_trpLid_Waste_inverted);
    __WaitODTCProtocolAsync(t_trpPCR_ODTC, t_trpLid_ODTC, t_trpPCR_Pipette02, l_trpLidSequence);
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == 1)
    {
      t_intIndexODTCMethod = 3;
      INHECOODTC_CONTROLLER::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, t_arrODTCProtocols.ElementAt( t_intIndexODTCMethod -1), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
    else
    {
      t_intIndexODTCMethod = 5;
      INHECOODTC_CONTROLLER::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, t_arrODTCProtocols.ElementAt( t_intIndexODTCMethod -1), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
  }
  MECC::TraceComment("Group start - ********** Transport MIDI **********");
  TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_CPAC03, t_trpMIDI_Pipette03, ASWGLOBAL::BOOL::TRUE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport MIDI **********");
  MECC::TraceComment("Group start - ********** Transfer 1st SPRIselect **********");
  l_fltFixedHeight = 4.7;
  l_fltVolumeMix = t_fltVolumeSPRIselectTracking * 0.7;
  l_fltVolumeMix = MthMin(l_fltVolumeMix, 300.0);
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" l_fltVolumeMix: "), l_fltVolumeMix, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqIntermediateAspirateMPH_SPRIselect, t_seqIntermediateAspirateMPH_SPRIselect, 0, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_SPRImix_SE"), 15, 0, l_fltVolumeMix, 0, 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqIntermediateAspirateMPH_SPRIselect, t_seqProcessMPH_SPRIselectPCR02, t_fltVolume_SPRI_1_P2, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_SPRI_SE"), 10, 30, t_fltVolume_SPRI_1_P2, t_fltVolume_Mix_1_P2, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltVolume_SPRI_1_P2;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  t_fltVolumeSPRIselectTracking = t_fltVolumeSPRIselectTracking - t_fltVolume_SPRI_1_P2;
  MECC::TraceComment("Group end - ********** Transfer 1st SPRIselect **********");
  MECC::TraceComment("Group start - ********** Begin 1st SPRIselect RT Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 300, 2);
  MECC::TraceComment("Group end - ********** Begin 1st SPRIselect RT Incubation **********");
  MECC::TraceComment("Group start - ********** Transfer 2nd SPRIselect **********");
  l_fltFixedHeight = 0.5;
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqIntermediateAspirateMPH_SPRIselect, t_seqProcessMPH_SPRIselectPCR01, t_fltVolume_SPRI_2_P2, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_SPRI_SE"), 0, 0, t_fltVolume_SPRI_2_P2, 0, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeSPRIselectTracking = t_fltVolumeSPRIselectTracking - t_fltVolume_SPRI_2_P2;
  MECC::TraceComment("Group end - ********** Transfer 2nd SPRIselect **********");
  MECC::TraceComment("Group start - ********** Complete 1st SPRIselect RT Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 300, 3);
  MECC::TraceComment("Group end - ********** Complete 1st SPRIselect RT Incubation **********");
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Pipette02, t_trpPCR_Magnet, ASWGLOBAL::BOOL::FALSE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment("Group start - ********** Begin 1st SPRIselect Mag Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 180, 2);
  MECC::TraceComment("Group end - ********** Begin 1st SPRIselect Mag Incubation **********");
  MECC::TraceComment("Group start - ********** Transport MIDI **********");
  TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_CPAC03, ASWGLOBAL::BOOL::FALSE, 4, 2);
  TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_HHS05, t_trpMIDI_Pipette03, ASWGLOBAL::BOOL::TRUE, 4, 2);
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  MECC::TraceComment("Group end - ********** Transport MIDI **********");
  MECC::TraceComment("Group start - ********** Complete 1st SPRIselect Mag Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 180, 3);
  MECC::TraceComment("Group end - ********** Complete 1st SPRIselect Mag Incubation **********");
  MECC::TraceComment("Group start - ********** Transfer 1st SPRIselect Supernatant **********");
  l_fltFixedHeight = 5.8;
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix_AspirateAll(ML_STAR, t_seqPCR_Magnet, t_seqProcessMPH_SPRIselectPCR01, t_fltVolume_Supernatant_1_P2, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_ProductPlateToPlate_SE"), 0, 30, 0, t_fltVolume_Mix_2_P2, l_fltFixedHeight, 1.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = t_fltVolume_SPRI_2_P2 + t_fltVolume_Supernatant_1_P2;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer 1st SPRIselect Supernatant **********");
  MECC::TraceComment("Group start - ********** Begin 2nd SPRIselect RT Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 300, 2);
  MECC::TraceComment("Group end - ********** Begin 2nd SPRIselect RT Incubation **********");
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Magnet, t_trpPCR_Waste, ASWGLOBAL::BOOL::FALSE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment("Group start - ********** Complete 2nd SPRIselect RT Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 300, 3);
  MECC::TraceComment("Group end - ********** Complete 2nd SPRIselect RT Incubation **********");
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Pipette01, t_trpPCR_Magnet, ASWGLOBAL::BOOL::TRUE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment("Group start - ********** Begin 2nd SPRIselect Mag Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 180, 2);
  MECC::TraceComment("Group end - ********** Begin 2nd SPRIselect Mag Incubation **********");
  MECC::TraceComment("Group start - ********** Complete 2nd SPRIselect Mag Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 180, 3);
  MECC::TraceComment("Group end - ********** Complete 2nd SPRIselect Mag Incubation **********");
  MECC::TraceComment("Group start - ********** Transfer 2nd SPRIselect Supernatant **********");
  l_fltFixedHeight = 5.4;
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix_AspirateAll(ML_STAR, t_seqPCR_Magnet, t_seqMPH_LiquidWaste, t_fltVolume_Supernatant_2_P2, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_SupernatantWaste_JE"), 0, 0, 0, 0, l_fltFixedHeight, 20.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = t_fltVolumeTracking - t_fltVolume_Supernatant_2_P2;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer 2nd SPRIselect Supernatant **********");
  MECC::TraceComment("Group start - ********** Transfer 1st EtOH **********");
  l_fltFixedHeight = 11.5;
  l_fltVolumeMix = t_fltVolume_EtOH_P2 * 0.5;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" l_fltVolumeMix: "), l_fltVolumeMix, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqDWP_Pipette04, t_seqPCR_Magnet, t_fltVolume_EtOH_P2, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_EtOH_JE"), 3, 0, l_fltVolumeMix, 0, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeTracking = t_fltVolume_EtOH_P2;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 25.0, 2);
  l_fltRestHeight = t_flt_Z_Magnet + l_fltFixedHeight;
  l_fltRestHeight = l_fltRestHeight - 1.5;
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 25.0, 3);
  MECC::TraceComment("Group end - ********** Transfer 1st EtOH **********");
  MECC::TraceComment("Group start - ********** Transfer 1st EtOH Supernatant **********");
  l_fltFixedHeight = 8.8;
  PIPETTING_CONTROLLER::PIP_MPH_DoubleAspiration_TipControl(ML_STAR, t_seqPCR_Magnet, t_seqMPH_LiquidWaste, t_fltVolume_EtOH_P2, 5.0, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_EtOHWaste_JE"), 0, 0, 0, l_fltFixedHeight, 0.3, 20.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = 0.0;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer 1st EtOH Supernatant **********");
  MECC::TraceComment("Group start - ********** Transfer 2nd EtOH **********");
  l_fltFixedHeight = 11.5;
  l_fltVolumeMix = t_fltVolume_EtOH_P2 * 0.5;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" l_fltVolumeMix: "), l_fltVolumeMix, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqDWP_Pipette04, t_seqPCR_Magnet, t_fltVolume_EtOH_P2, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_EtOH_JE"), 3, 0, l_fltVolumeMix, 0, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeTracking = t_fltVolume_EtOH_P2;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 25.0, 2);
  l_fltRestHeight = t_flt_Z_Magnet + l_fltFixedHeight;
  l_fltRestHeight = l_fltRestHeight - 1.5;
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 25.0, 3);
  MECC::TraceComment("Group end - ********** Transfer 2nd EtOH **********");
  MECC::TraceComment("Group start - ********** Transfer 2nd EtOH Supernatant **********");
  l_fltFixedHeight = 8.8;
  PIPETTING_CONTROLLER::PIP_MPH_DoubleAspiration_TipControl(ML_STAR, t_seqPCR_Magnet, t_seqMPH_LiquidWaste, t_fltVolume_EtOH_P2, 5.0, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_EtOHWaste_JE"), 0, 0, 0, l_fltFixedHeight, 0.3, 20.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = 0.0;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer 2nd EtOH Supernatant **********");
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Magnet, t_trpPCR_Pipette02, ASWGLOBAL::BOOL::TRUE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment("Group start - ********** Transfer Buffer EB **********");
  l_intCurrentPosition = t_seqIntermediateAspirateChannels_BufferEB.GetCurrentPosition();
  l_fltFixedHeight = 1.0;
  if (l_intCurrentPosition > 0)
  {
    PIPETTING_CONTROLLER::PIP_Channels_ExpandedMix(ML_STAR, t_seqIntermediateAspirateChannels_BufferEB, t_seqProcessChannels_BufferEB, t_fltVolume_BufferEB_P2, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_BufferEB_SE"), 0, 30, 0, t_fltVolume_Mix_3_P2, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
  }
  l_intCurrentPosition = t_seqIntermediateAspirateMPH_BufferEB.GetCurrentPosition();
  if (l_intCurrentPosition > 0)
  {
    PIPETTING_CONTROLLER::PIP_MPH_StampAdvance_ExpandedMix(ML_STAR, t_seqIntermediateAspirateMPH_BufferEB, t_seqProcessMPH_BufferEB, t_fltVolume_BufferEB_P2, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_BufferEB_SE"), 0, 30, 0, t_fltVolume_Mix_3_P2, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  t_fltVolumeTracking = t_fltVolume_BufferEB_P2;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer Buffer EB **********");
  MECC::TraceComment("Group start - ********** Begin Elution Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 120, 2);
  MECC::TraceComment("Group end - ********** Begin Elution Incubation **********");
  MECC::TraceComment("Group start - ********** Transport MIDI **********");
  TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_HHS05, ASWGLOBAL::BOOL::FALSE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport MIDI **********");
  MECC::TraceComment("Group start - ********** Complete Elution Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 120, 3);
  MECC::TraceComment("Group end - ********** Complete Elution Incubation **********");
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Pipette02, t_trpPCR_Magnet, ASWGLOBAL::BOOL::FALSE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment("Group start - ********** Begin Elution Mag Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 180, 2);
  MECC::TraceComment("Group end - ********** Begin Elution Mag Incubation **********");
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_PCRStack01, t_trpPCR_Pipette02, ASWGLOBAL::BOOL::TRUE, 4, 2);
  SeqIncrement(t_trpPCR_PCRStack01, 1);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment("Group start - ********** Complete Elution Mag Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 180, 3);
  MECC::TraceComment("Group end - ********** Complete Elution Mag Incubation **********");
  MECC::TraceComment("Group start - ********** Transfer Eluate **********");
  l_fltFixedHeight = 1.0;
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqPCR_Magnet, t_seqPCR_Pipette02, t_fltVolume_Supernatant_3_P2, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_ProductPlateToPlate_SE"), 0, 0, 0, 0, l_fltFixedHeight, 1.0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = t_fltVolume_Supernatant_3_P2;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer Eluate **********");
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Magnet, t_trpPCR_Waste, ASWGLOBAL::BOOL::TRUE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment(Translate("SAFE STOPPING POINT\nIf you are stopping, store at 2캜 to 8캜 for up to 2 days. Alternatively, leave on the thermal cycler for up to 24 hours."));
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strMethodName, Translate(""));
}

private function __RunODTCProtocolAsync( sequence & i_seqPlateSource, sequence & i_seqLidSource, sequence & i_seqPlateODTC, sequence & i_seqLidODTC, sequence & i_seqPlateDestination, variable i_strODTCProtocolName, variable i_intIncubationDuration, variable i_strDialogMessage ) void {
  private variable l_intTimeForProtocol_Hours;
  private variable l_str_DateTimeNow;
  private variable l_strMessageReportFile;
  private variable l_strMessageDialog;
  private variable l_intTimeForProtocol_Seconds;
  private variable l_intTimeForProtocol_Minutes;
  private variable l_strFunctionName;
  private timer IncubateOnODTC;
  private timer l_timODTCProtocolName;
  l_strFunctionName = Translate("");
  l_strFunctionName = GetFunctionName();
  DATA_CONTROLLER::Start_Function(l_strFunctionName, ASWGLOBAL::BOOL::FALSE);
  DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Transport samples to ODTC"), ASWGLOBAL::BOOL::TRUE);
  INHECOODTC_CONTROLLER::ODTC_OpenDoor(t_intDeviceNumberODTC);
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, i_seqPlateSource, i_seqPlateODTC, 0, 2, 1);
  TRANSPORT_CONTROLLER::Trp_Lid(ML_STAR, i_seqLidSource, i_seqLidODTC, 1, 2, 1);
  INHECOODTC_CONTROLLER::ODTC_CloseDoor(t_intDeviceNumberODTC);
  l_strMessageReportFile = StrConcat2(Translate("-Run program on the ODTC: "), i_strODTCProtocolName);
  DATA_CONTROLLER::Reportfile_UpdateData(l_strMessageReportFile, ASWGLOBAL::BOOL::TRUE);
  INHECOODTC_CONTROLLER::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, i_strODTCProtocolName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::TRUE);
  DATA_CONTROLLER::Timer_Incubation(l_timODTCProtocolName, t_intTimeForProtocol, 2);
  HSLTime::GetDateTimeNow(l_str_DateTimeNow);
  if (i_intIncubationDuration != 0)
  {
    if (i_intIncubationDuration >= 3600)
    {
      l_intTimeForProtocol_Seconds = i_intIncubationDuration % 60;
      l_intTimeForProtocol_Hours = i_intIncubationDuration - l_intTimeForProtocol_Seconds;
      l_intTimeForProtocol_Hours = l_intTimeForProtocol_Hours / 60;
      l_intTimeForProtocol_Minutes = l_intTimeForProtocol_Hours % 60;
      l_intTimeForProtocol_Hours = l_intTimeForProtocol_Hours - l_intTimeForProtocol_Minutes;
      l_intTimeForProtocol_Hours = l_intTimeForProtocol_Hours / 60;
      l_strMessageDialog = StrConcat12(Translate("\nRun ODTC protocol '"), i_strODTCProtocolName, Translate("'\n       Protocol was started at "), l_str_DateTimeNow, Translate("\n       The protocol will run for "), Translate(""), l_intTimeForProtocol_Hours, Translate("h "), l_intTimeForProtocol_Minutes, Translate("m "), l_intTimeForProtocol_Seconds, Translate("s"));
    }
    else
    {
      if (i_intIncubationDuration >= 60)
      {
        l_intTimeForProtocol_Seconds = i_intIncubationDuration % 60;
        l_intTimeForProtocol_Minutes = i_intIncubationDuration - l_intTimeForProtocol_Seconds;
        l_intTimeForProtocol_Minutes = l_intTimeForProtocol_Minutes / 60;
        l_strMessageDialog = StrConcat12(Translate("\nRun ODTC protocol '"), i_strODTCProtocolName, Translate("'\n       Protocol was started at "), l_str_DateTimeNow, Translate("\n       The protocol will run for "), Translate(""), Translate(""), Translate(""), l_intTimeForProtocol_Minutes, Translate("m "), l_intTimeForProtocol_Seconds, Translate("s"));
      }
      else
      {
        l_strMessageDialog = StrConcat12(Translate("\nRun ODTC protocol '"), i_strODTCProtocolName, Translate("'\n       Protocol was started at "), l_str_DateTimeNow, Translate("\n       The protocol will run for "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), i_intIncubationDuration, Translate("s"));
      }
    }
    if (i_strDialogMessage != "")
    {
      l_strMessageDialog = StrConcat4(l_strMessageDialog, Translate("\n       "), i_strDialogMessage, Translate(""));
    }
    VectorCustomDialogs::AppendStatusText(l_strMessageDialog);
    DATA_CONTROLLER::Timer_Incubation(IncubateOnODTC, i_intIncubationDuration, 1);
  }
  else
  {
    if (t_intTimeForProtocol >= 3600)
    {
      l_intTimeForProtocol_Seconds = t_intTimeForProtocol % 60;
      l_intTimeForProtocol_Hours = t_intTimeForProtocol - l_intTimeForProtocol_Seconds;
      l_intTimeForProtocol_Hours = l_intTimeForProtocol_Hours / 60;
      l_intTimeForProtocol_Minutes = l_intTimeForProtocol_Hours % 60;
      l_intTimeForProtocol_Hours = l_intTimeForProtocol_Hours - l_intTimeForProtocol_Minutes;
      l_intTimeForProtocol_Hours = l_intTimeForProtocol_Hours / 60;
      l_strMessageDialog = StrConcat12(Translate("\nRun ODTC protocol '"), i_strODTCProtocolName, Translate("'\n       Protocol was started at "), l_str_DateTimeNow, Translate("\n       The protocol will run for "), Translate(""), l_intTimeForProtocol_Hours, Translate("h "), l_intTimeForProtocol_Minutes, Translate("m "), l_intTimeForProtocol_Seconds, Translate("s"));
    }
    else
    {
      if (t_intTimeForProtocol >= 60)
      {
        l_intTimeForProtocol_Seconds = t_intTimeForProtocol % 60;
        l_intTimeForProtocol_Minutes = t_intTimeForProtocol - l_intTimeForProtocol_Seconds;
        l_intTimeForProtocol_Minutes = l_intTimeForProtocol_Minutes / 60;
        l_strMessageDialog = StrConcat12(Translate("\nRun ODTC protocol '"), i_strODTCProtocolName, Translate("'\n       Protocol was started at "), l_str_DateTimeNow, Translate("\n       The protocol will run for "), Translate(""), Translate(""), Translate(""), l_intTimeForProtocol_Minutes, Translate("m "), l_intTimeForProtocol_Seconds, Translate("s"));
      }
      else
      {
        l_strMessageDialog = StrConcat12(Translate("\nRun ODTC protocol '"), i_strODTCProtocolName, Translate("'\n       Protocol was started at "), l_str_DateTimeNow, Translate("\n       The protocol will run for "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), t_intTimeForProtocol, Translate("s"));
      }
    }
    if (i_strDialogMessage != "")
    {
      l_strMessageDialog = StrConcat4(l_strMessageDialog, Translate("\n       "), i_strDialogMessage, Translate(""));
    }
    VectorCustomDialogs::AppendStatusText(l_strMessageDialog);
  }
  DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Retrieve samples from ODTC"), ASWGLOBAL::BOOL::TRUE);
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strMethodName, Translate(""));
}

private function __WaitODTCProtocolAsync( sequence & i_seqPlateODTC, sequence & i_seqLidODTC, sequence & i_seqPlateDestination, sequence & i_seqLidDestination ) void {
  private variable l_strFunctionName;
  l_strFunctionName = Translate("");
  l_strFunctionName = GetFunctionName();
  DATA_CONTROLLER::Start_Function(l_strFunctionName, ASWGLOBAL::BOOL::FALSE);
  INHECOODTC_CONTROLLER::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
  DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Retrieve samples from ODTC"), ASWGLOBAL::BOOL::TRUE);
  INHECOODTC_CONTROLLER::ODTC_OpenDoor(t_intDeviceNumberODTC);
  TRANSPORT_CONTROLLER::Trp_Lid(ML_STAR, i_seqLidODTC, i_seqLidDestination, 0, 2, 1);
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, i_seqPlateODTC, i_seqPlateDestination, 1, 2, 1);
  INHECOODTC_CONTROLLER::ODTC_CloseDoor(t_intDeviceNumberODTC);
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strMethodName, Translate(""));
}

private function Process03_AdaptorLigation(  ) void {
  private variable l_intCurrentPosition;
  private sequence l_trpLidSequence;
  private variable l_fltFixedHeight;
  private variable l_arr_fltAspiration[];
  private variable l_arr_fltMix[];
  private variable l_strMessageExternalThermalCycling_1;
  private variable l_strMessageExternalThermalCycling_2;
  private variable l_strLoadingImagePath;
  t_strFunctionName = GetFunctionName();
  DATA_CONTROLLER::Start_Function(t_strFunctionName, ASWGLOBAL::BOOL::TRUE);
  VENUSTEXTTOSPEECH::Run(t_strFunctionName);
  JSONRUNREPORT::Add_TimeStamp(t_strFunctionName);
  t_fltVolumeTracking = t_fltVolume_Supernatant_3_P2;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  __ReviewORReloadStockOfTips(0, t_intRequiredNumberOf300uLTipsProcess03, 0);
  if (t_blnIndexplateLoaded == ASWGLOBAL::BOOL::TRUE&& t_blnIndexPlateSecured == ASWGLOBAL::BOOL::FALSE)
  {
    MECC::TraceComment("Group start - ********** Transport Index **********");
    TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Pipette01, t_trpPCR_HHS01, ASWGLOBAL::BOOL::FALSE, 4, 2);
    t_blnIndexPlateSecured = ASWGLOBAL::BOOL::TRUE;
    MECC::TraceComment("Group end - ********** Transport Index **********");
  }
  if (t_blnMasterMixPlated == ASWGLOBAL::BOOL::FALSE)
  {
    MECC::TraceComment("Group start - ********** Transport MIDI **********");
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_MIDIStack01, t_trpMIDI_CPAC02, ASWGLOBAL::BOOL::TRUE, 4, 2);
    SeqIncrement(t_trpMIDI_MIDIStack01, 1);
    MECC::TraceComment("Group end - ********** Transport MIDI **********");
  }
  MECC::TraceComment("Group start - ********** Plate out reagents to Intermediate MIDI plate **********");
  DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Prepare Adaptor Ligation Mix"), ASWGLOBAL::BOOL::TRUE);
  l_arr_fltMix.SetSize(t_intNumberOfIntermediatePlateWells);
  {//Arrange the mix volume array
    variable i, bucket;
    for(i = 1;i <= t_intNumberOfIntermediatePlateWells;i++){
         bucket = (t_arr_fltVolumeTarget_LigationMix.GetAt(i - 1) + t_arr_fltVolumeTarget_DNAligase.GetAt(i - 1)) * 0.7;
         bucket = MthMin(bucket, 300);
         l_arr_fltMix.SetAt(i - 1, bucket);
       }
  }
  if (t_arr_fltVolumeSource_LigationMix.ElementAt( 1 -1) > 300.0)
  {
    l_arr_fltAspiration=t_arr_fltVolumeSource_LigationMix;
    {//Reduce the source volume array for 2x transfer due to tip capacity
      variable i, j, bucket;
      j = l_arr_fltAspiration.GetSize();
      for(i = 1;i <= j;i++){
           bucket = l_arr_fltAspiration.GetAt(i - 1) / 2.0;
           l_arr_fltAspiration.SetAt(i - 1, bucket);
         }
    }
    HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
    PIPETTING_CONTROLLER::PIP_Channels_WithVolumeArray_ExpandedMix(ML_STAR, t_seqLigationMix, t_seqIntermediateDispense_AdaptorLigationMix_Create, l_arr_fltAspiration, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_LigationMix_SE"), 0, 0, l_arr_fltAspiration, l_arr_fltAspiration, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
    HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
    HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
    PIPETTING_CONTROLLER::PIP_Channels_WithVolumeArray_ExpandedMix(ML_STAR, t_seqLigationMix, t_seqIntermediateDispense_AdaptorLigationMix_Create, l_arr_fltAspiration, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_LigationMix_SE"), 0, 0, l_arr_fltAspiration, l_arr_fltAspiration, 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
    HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
  }
  else
  {
    HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
    PIPETTING_CONTROLLER::PIP_Channels_WithVolumeArray_ExpandedMix(ML_STAR, t_seqLigationMix, t_seqIntermediateDispense_AdaptorLigationMix_Create, t_arr_fltVolumeSource_LigationMix, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_LigationMix_SE"), 0, 0, t_arr_fltVolumeSource_LigationMix, t_arr_fltVolumeSource_LigationMix, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
    HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
  }
  TRACELEVEL::TraceArrayHorizontally(TRACE_LEVEL_RELEASE, Translate("l_arr_fltMix, in 킠"), l_arr_fltMix);
  HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
  PIPETTING_CONTROLLER::PIP_Channels_WithVolumeArray_ExpandedMix(ML_STAR, t_seqDNAligase, t_seqIntermediateDispense_AdaptorLigationMix_Create, t_arr_fltVolumeSource_DNAligase, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_DNALigase_SE"), 0, 15, t_arr_fltVolumeSource_DNAligase, l_arr_fltMix, 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
  HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
  t_blnMasterMixPlated = ASWGLOBAL::BOOL::TRUE;
  if (t_arrBlnProcessActivation.ElementAt( 5 -1) == 0)
  {
    INHECOTEC_CONTROLLER::TEC_SetTemperature(20, t_intDeviceID_CPAC01);
    INHECOTEC_CONTROLLER::TEC_SetTemperature(20, t_intDeviceID_CPAC02);
  }
  MECC::TraceComment("Group end - ********** Plate out reagents to Intermediate MIDI plate **********");
  MECC::TraceComment("Group start - ********** Transport MIDI **********");
  TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_CPAC02, t_trpMIDI_Pipette03, ASWGLOBAL::BOOL::TRUE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport MIDI **********");
  MECC::TraceComment("Group start - ********** TransferAdaptor Ligation Mix **********");
  l_fltFixedHeight = 3.7;
  l_intCurrentPosition = t_seqIntermediateAspirateChannels_AdaptorLigationMix.GetCurrentPosition();
  if (l_intCurrentPosition > 0)
  {
    HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
    PIPETTING_CONTROLLER::PIP_Channels_ExpandedMix(ML_STAR, t_seqIntermediateAspirateChannels_AdaptorLigationMix, t_seqProcessChannels_AdaptorLigationMix, t_fltVolume_AdaptorLigationMix, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_AdaptorLigationMix_SE"), 1, 15, t_fltVolume_AdaptorLigationMix, 90.0, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
    HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
  }
  l_intCurrentPosition = t_seqIntermediateAspirateMPH_AdaptorLigationMix.GetCurrentPosition();
  if (l_intCurrentPosition > 0)
  {
    PIPETTING_CONTROLLER::PIP_MPH_StampAdvance_ExpandedMix(ML_STAR, t_seqIntermediateAspirateMPH_AdaptorLigationMix, t_seqProcessMPH_AdaptorLigationMix, t_fltVolume_AdaptorLigationMix, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_AdaptorLigationMix_SE"), 1, 15, t_fltVolume_AdaptorLigationMix, 90.0, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltVolume_AdaptorLigationMix;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** TransferAdaptor Ligation Mix **********");
  MECC::TraceComment("Group start - ********** Incubation in ODTC **********");
  if (t_blnExternalThermalcycling == ASWGLOBAL::BOOL::FALSE)
  {
    SeqCopySequence(l_trpLidSequence, t_trpLid_Waste_inverted);
    __WaitODTCProtocolAsync_NoTransport(Translate(""));
    t_intIndexODTCMethod = 4;
    __RunODTCProtocolAsync(t_trpPCR_Pipette02, t_trpLid_LidStack01, t_trpPCR_ODTC, t_trpLid_ODTC, t_trpPCR_Pipette02, t_arrODTCProtocols.ElementAt( t_intIndexODTCMethod -1), 0, Translate(""));
    SeqIncrement(t_trpLid_LidStack01, 1);
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_CPAC02, ASWGLOBAL::BOOL::TRUE, 4, 2);
    TIPMANAGEMENTLIBRARY::Channel_DefragmentTipSequence(ML_STAR, t_strTipCounterNameTip300, TIP_TOOLS::DefragmentationDirection::ColumnWise);
    ML_STAR._13722C3E_1C8F_4237_BFAF_A7CE81549723("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"); // WaitForTadmUpload
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == 0)
    {
      __WaitODTCProtocolAsync(t_trpPCR_ODTC, t_trpLid_ODTC, t_trpPCR_Pipette02, l_trpLidSequence);
      t_intIndexODTCMethod = 5;
      INHECOODTC_CONTROLLER::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, t_arrODTCProtocols.ElementAt( t_intIndexODTCMethod -1), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
  }
  else
  {
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_CPAC02, ASWGLOBAL::BOOL::TRUE, 4, 2);
    l_strMessageExternalThermalCycling_1 = StrConcat12(Translate("External Ligation."), Translate("\n\n"), Translate("- Please retrieve the sample plate from position 2 of the processing carrier."), Translate(""), Translate("\n\n"), Translate(""), Translate(""), Translate(""), Translate("- Press OK to reload the processing carrier while external incubation is performed."), Translate(""), Translate("\n\n"), Translate("CANCEL will abort the run"));
    l_strMessageExternalThermalCycling_2 = StrConcat12(Translate("External Ligation."), Translate("\n\n"), Translate("- Please replace the sample plate to position 2 of the processing carrier."), Translate(""), Translate("\n\n"), Translate(""), Translate(""), Translate(""), Translate("- Press OK to continue the method."), Translate(""), Translate("\n\n"), Translate("CANCEL will abort the run"));
    l_strLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("PlateTipCarrierMOA.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    __ExternalThermalcycling(Translate("Processing_Carrier"), l_strMessageExternalThermalCycling_1, l_strMessageExternalThermalCycling_2, l_strLoadingImagePath);
  }
  MECC::TraceComment("Group end - ********** Incubation in ODTC **********");
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strMethodName, Translate(""));
}

private function Process04_PostLigationCleanup(  ) void {
  private variable l_fltVolumeMix;
  private variable l_intCurrentPosition;
  private sequence l_trpLidSequence;
  private timer l_hdlTimer;
  private variable l_strError;
  private variable l_fltFixedHeight;
  private variable l_fltRestHeight;
  t_strFunctionName = GetFunctionName();
  DATA_CONTROLLER::Start_Function(t_strFunctionName, ASWGLOBAL::BOOL::TRUE);
  VENUSTEXTTOSPEECH::Run(t_strFunctionName);
  JSONRUNREPORT::Add_TimeStamp(t_strFunctionName);
  t_fltVolumeTracking = t_fltVolume_Supernatant_3_P2 + t_fltVolume_AdaptorLigationMix;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  __ReviewORReloadStockOfTips(0, t_intRequiredNumberOf300uLTipsProcess04, 0);
  if (t_blnIndexplateLoaded == ASWGLOBAL::BOOL::TRUE&& t_blnIndexPlateSecured == ASWGLOBAL::BOOL::FALSE)
  {
    MECC::TraceComment("Group start - ********** Transport Index **********");
    TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Pipette01, t_trpPCR_HHS01, ASWGLOBAL::BOOL::FALSE, 4, 2);
    t_blnIndexPlateSecured = ASWGLOBAL::BOOL::TRUE;
    MECC::TraceComment("Group end - ********** Transport Index **********");
  }
  if (t_blnSPRIselectAndBufferEBplated == ASWGLOBAL::BOOL::FALSE)
  {
    MECC::TraceComment("Group start - ********** Transport MIDI **********");
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_MIDIStack01, t_trpMIDI_Pipette03, ASWGLOBAL::BOOL::TRUE, 4, 2);
    SeqIncrement(t_trpMIDI_MIDIStack01, 1);
    MECC::TraceComment("Group end - ********** Transport MIDI **********");
    MECC::TraceComment("Group start - ********** Plate out Buffer EB to Intermediate MIDI plate **********");
    DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Prepare Buffer EB plate"), ASWGLOBAL::BOOL::TRUE);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, ML_STAR.RGT20ml_04);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, t_seqIntermediateDispense_BufferEB);
    PIPETTING_CONTROLLER::PIP_Channels(ML_STAR, t_seqBufferEB, t_seqIntermediateDispense_BufferEB, t_arr_fltVolumeSource_BufferEB.ElementAt( 1 -1), Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_BufferEBPlate_JE"), 0, 0, 0, 0, 20.0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, 0);
    MECC::TraceComment("Group end - ********** Plate out Buffer EB to Intermediate MIDI plate **********");
    MECC::TraceComment("Group start - ********** Transport MIDI **********");
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_HHS05, ASWGLOBAL::BOOL::FALSE, 4, 2);
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_MIDIStack01, t_trpMIDI_Pipette03, ASWGLOBAL::BOOL::TRUE, 4, 2);
    SeqIncrement(t_trpMIDI_MIDIStack01, 1);
    MECC::TraceComment("Group end - ********** Transport MIDI **********");
    MECC::TraceComment("Group start - ********** Plate out SPRIselect to Intermediate MIDI plate **********");
    DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Prepare SPRI plate"), ASWGLOBAL::BOOL::TRUE);
    l_fltVolumeMix = t_arr_fltVolumeTubes_SPRIselect.ElementAt( 1 -1) * 0.7 / (8 * 1.0);
    l_fltVolumeMix = MthMin(l_fltVolumeMix, 300.0);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("Volume base: "), t_arr_fltVolumeTubes_SPRIselect.ElementAt( 1 -1), Translate(" --- "), Translate("calc mix volume:"), l_fltVolumeMix, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    PIPETTING_CONTROLLER::PIP_Channels_MixBeadsByOverturn(ML_STAR, t_seqSPRItrough, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_SPRImix_SE"), 5, 5, 50.0, l_fltVolumeMix, 3.0, 3.0, 3.0, l_strError);
    PIPETTING_CONTROLLER::PIP_Channels(ML_STAR, t_seqSPRIselect, t_seqIntermediateDispense_SPRIselect, t_arr_fltVolumeSource_SPRIselect.ElementAt( 1 -1), Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_SPRIBlowout_SE"), 10, t_arr_fltVolumeSource_SPRIselect.ElementAt( 1 -1), 0, 0, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
    t_blnSPRIselectAndBufferEBplated = ASWGLOBAL::BOOL::TRUE;
    MECC::TraceComment("Group end - ********** Plate out SPRIselect to Intermediate MIDI plate **********");
    MECC::TraceComment("Group start - ********** Transport MIDI **********");
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_CPAC03, ASWGLOBAL::BOOL::TRUE, 4, 2);
    MECC::TraceComment("Group end - ********** Transport MIDI **********");
  }
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == 1)
  {
    SeqCopySequence(l_trpLidSequence, t_trpLid_Waste_inverted);
    __WaitODTCProtocolAsync(t_trpPCR_ODTC, t_trpLid_ODTC, t_trpPCR_Pipette02, l_trpLidSequence);
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == 1)
    {
      t_intIndexODTCMethod = 5;
      INHECOODTC_CONTROLLER::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, t_arrODTCProtocols.ElementAt( t_intIndexODTCMethod -1), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
    else
    {
      t_intIndexODTCMethod = 5;
      INHECOODTC_CONTROLLER::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, t_arrODTCProtocols.ElementAt( t_intIndexODTCMethod -1), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
  }
  MECC::TraceComment("Group start - ********** Transport MIDI **********");
  TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_CPAC03, t_trpMIDI_Pipette03, ASWGLOBAL::BOOL::TRUE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport MIDI **********");
  MECC::TraceComment("Group start - ********** Transfer SPRIselect **********");
  l_fltFixedHeight = 7.1;
  l_fltVolumeMix = t_fltVolumeSPRIselectTracking * 0.7;
  l_fltVolumeMix = MthMin(l_fltVolumeMix, 300.0);
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" l_fltVolumeMix: "), l_fltVolumeMix, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqIntermediateAspirateMPH_SPRIselect, t_seqIntermediateAspirateMPH_SPRIselect, 0, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_SPRImix_SE"), 15, 0, l_fltVolumeMix, 0, 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqIntermediateAspirateMPH_SPRIselect, t_seqProcessMPH_SPRIselectPCR02, t_fltVolume_SPRI_P4, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_SPRI_SE"), 10, 30, t_fltVolume_SPRI_P4, t_fltVolume_Mix_1_P4, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltVolume_SPRI_P4;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  t_fltVolumeSPRIselectTracking = t_fltVolumeSPRIselectTracking - t_fltVolume_SPRI_P4;
  MECC::TraceComment("Group end - ********** Transfer SPRIselect **********");
  MECC::TraceComment("Group start - ********** Begin SPRIselect RT Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 300, 2);
  MECC::TraceComment("Group end - ********** Begin SPRIselect RT Incubation **********");
  MECC::TraceComment("Group start - ********** Complete SPRIselect RT Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 300, 3);
  MECC::TraceComment("Group end - ********** Complete SPRIselect RT Incubation **********");
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Pipette02, t_trpPCR_Magnet, ASWGLOBAL::BOOL::FALSE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment("Group start - ********** Begin SPRIselect Mag Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 240, 2);
  MECC::TraceComment("Group end - ********** Begin SPRIselect Mag Incubation **********");
  MECC::TraceComment("Group start - ********** Transport MIDI **********");
  TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_CPAC03, ASWGLOBAL::BOOL::FALSE, 4, 2);
  TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_HHS05, t_trpMIDI_Pipette03, ASWGLOBAL::BOOL::TRUE, 4, 2);
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  MECC::TraceComment("Group end - ********** Transport MIDI **********");
  MECC::TraceComment("Group start - ********** Complete SPRIselect Mag Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 240, 3);
  MECC::TraceComment("Group end - ********** Complete SPRIselect Mag Incubation **********");
  MECC::TraceComment("Group start - ********** Transfer SPRIselect Supernatant **********");
  l_fltFixedHeight = 11.5;
  PIPETTING_CONTROLLER::PIP_MPH_DoubleAspiration_TipControl(ML_STAR, t_seqPCR_Magnet, t_seqMPH_LiquidWaste, t_fltVolumeTracking, 10.0, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_SupernatantWaste_JE"), 0, 0, 0, l_fltFixedHeight, 0.3, 20.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = 0.0;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer SPRIselect Supernatant **********");
  MECC::TraceComment("Group start - ********** Transfer 1st EtOH **********");
  l_fltFixedHeight = 14.0;
  l_fltVolumeMix = t_fltVolume_EtOH_P4 * 0.5;
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqDWP_Pipette04, t_seqPCR_Magnet, t_fltVolume_EtOH_P4, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_EtOH_JE"), 3, 0, l_fltVolumeMix, 0, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeTracking = t_fltVolume_EtOH_P4;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 25.0, 2);
  l_fltRestHeight = t_flt_Z_Magnet + l_fltFixedHeight;
  l_fltRestHeight = l_fltRestHeight - 1.5;
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 25.0, 3);
  MECC::TraceComment("Group end - ********** Transfer 1st EtOH **********");
  MECC::TraceComment("Group start - ********** Transfer 1st EtOH Supernatant **********");
  l_fltFixedHeight = 13.7;
  PIPETTING_CONTROLLER::PIP_MPH_DoubleAspiration_TipControl(ML_STAR, t_seqPCR_Magnet, t_seqMPH_LiquidWaste, t_fltVolume_EtOH_P4, 10.0, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_EtOHWaste_JE"), 0, 0, 0, l_fltFixedHeight, 0.3, 20.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = 0.0;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer 1st EtOH Supernatant **********");
  MECC::TraceComment("Group start - ********** Transfer 2nd EtOH **********");
  l_fltFixedHeight = 14.0;
  l_fltVolumeMix = t_fltVolume_EtOH_P4 * 0.5;
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqDWP_Pipette04, t_seqPCR_Magnet, t_fltVolume_EtOH_P4, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_EtOH_JE"), 3, 0, l_fltVolumeMix, 0, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeTracking = t_fltVolume_EtOH_P4;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 25.0, 2);
  l_fltRestHeight = t_flt_Z_Magnet + l_fltFixedHeight;
  l_fltRestHeight = l_fltRestHeight - 1.5;
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 25.0, 3);
  MECC::TraceComment("Group end - ********** Transfer 2nd EtOH **********");
  MECC::TraceComment("Group start - ********** Transfer 2nd EtOH Supernatant **********");
  l_fltFixedHeight = 13.7;
  PIPETTING_CONTROLLER::PIP_MPH_DoubleAspiration_TipControl(ML_STAR, t_seqPCR_Magnet, t_seqMPH_LiquidWaste, t_fltVolume_EtOH_P4, 10.0, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_EtOHWaste_JE"), 0, 0, 0, l_fltFixedHeight, 0.3, 20.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = 0.0;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer 2nd EtOH Supernatant **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 120, 1);
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Magnet, t_trpPCR_Pipette02, ASWGLOBAL::BOOL::TRUE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment("Group start - ********** Transfer Buffer EB **********");
  l_fltFixedHeight = 2.0;
  l_intCurrentPosition = t_seqIntermediateAspirateChannels_BufferEB.GetCurrentPosition();
  if (l_intCurrentPosition > 0)
  {
    PIPETTING_CONTROLLER::PIP_Channels_ExpandedMix(ML_STAR, t_seqIntermediateAspirateChannels_BufferEB, t_seqProcessChannels_BufferEB, t_fltVolume_BufferEB_P4, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_BufferEB_SE"), 0, 35, 0, t_fltVolume_Mix_2_P4, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
  }
  l_intCurrentPosition = t_seqIntermediateAspirateMPH_BufferEB.GetCurrentPosition();
  if (l_intCurrentPosition > 0)
  {
    PIPETTING_CONTROLLER::PIP_MPH_StampAdvance_ExpandedMix(ML_STAR, t_seqIntermediateAspirateMPH_BufferEB, t_seqProcessMPH_BufferEB, t_fltVolume_BufferEB_P4, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_BufferEB_SE"), 0, 35, 0, t_fltVolume_Mix_2_P4, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  t_fltVolumeTracking = t_fltVolume_BufferEB_P4;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer Buffer EB **********");
  MECC::TraceComment("Group start - ********** Begin Elution Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 120, 2);
  MECC::TraceComment("Group end - ********** Begin Elution Incubation **********");
  MECC::TraceComment("Group start - ********** Transport MIDI **********");
  TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_HHS05, ASWGLOBAL::BOOL::FALSE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport MIDI **********");
  MECC::TraceComment("Group start - ********** Complete Elution Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 120, 3);
  MECC::TraceComment("Group end - ********** Complete Elution Incubation **********");
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Pipette02, t_trpPCR_Magnet, ASWGLOBAL::BOOL::FALSE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment("Group start - ********** Begin Elution Mag Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 240, 2);
  MECC::TraceComment("Group end - ********** Begin Elution Mag Incubation **********");
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_PCRStack01, t_trpPCR_Pipette02, ASWGLOBAL::BOOL::TRUE, 4, 2);
  SeqIncrement(t_trpPCR_PCRStack01, 1);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment("Group start - ********** Complete Elution Mag Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 240, 3);
  MECC::TraceComment("Group end - ********** Complete Elution Mag Incubation **********");
  MECC::TraceComment("Group start - ********** Transfer Eluate **********");
  l_fltFixedHeight = 1.0;
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqPCR_Magnet, t_seqPCR_Pipette02, t_fltVolume_Supernatant_P4, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_ProductPlateToPlate_SE"), 0, 0, 0, 0, l_fltFixedHeight, 1.0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = t_fltVolume_Supernatant_P4;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer Eluate **********");
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Magnet, t_trpPCR_Waste, ASWGLOBAL::BOOL::TRUE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment(Translate("SAFE STOPPING POINT\nIf you are stopping, store at 2캜 to 8캜 for up to 2 days. Alternatively, leave on the thermal cycler for up to 24 hours."));
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strMethodName, Translate(""));
}

private function Process06_PostIndexSPRIselection(  ) void {
  private variable l_fltVolumeMix;
  private variable l_intCurrentPosition;
  private sequence l_trpLidSequence;
  private timer l_hdlTimer;
  private variable l_strError;
  private variable l_fltFixedHeight;
  private variable l_fltRestHeight;
  t_strFunctionName = GetFunctionName();
  DATA_CONTROLLER::Start_Function(t_strFunctionName, ASWGLOBAL::BOOL::TRUE);
  VENUSTEXTTOSPEECH::Run(t_strFunctionName);
  JSONRUNREPORT::Add_TimeStamp(t_strFunctionName);
  t_fltVolumeTracking = t_fltVolume_Supernatant_P4 + t_fltVolume_LibraryAmpMix + t_fltVolume_DualIndex;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  __ReviewORReloadStockOfTips(0, t_intRequiredNumberOf300uLTipsProcess06, 0);
  if (t_blnIndexplateLoaded == ASWGLOBAL::BOOL::TRUE&& t_blnIndexPlateSecured == ASWGLOBAL::BOOL::FALSE)
  {
    MECC::TraceComment("Group start - ********** Transport Index **********");
    TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Pipette01, t_trpPCR_HHS01, ASWGLOBAL::BOOL::FALSE, 4, 2);
    t_blnIndexPlateSecured = ASWGLOBAL::BOOL::TRUE;
    MECC::TraceComment("Group end - ********** Transport Index **********");
    MECC::TraceComment("Group start - ********** Transport PCR **********");
    TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_PCRStack01, t_trpPCR_Pipette01, ASWGLOBAL::BOOL::FALSE, 4, 2);
    SeqIncrement(t_trpPCR_PCRStack01, 1);
    MECC::TraceComment("Group end - ********** Transport PCR **********");
  }
  else
  {
    MECC::TraceComment("Group start - ********** Transport PCR **********");
    TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_PCRStack01, t_trpPCR_Pipette01, ASWGLOBAL::BOOL::FALSE, 4, 2);
    SeqIncrement(t_trpPCR_PCRStack01, 1);
    MECC::TraceComment("Group end - ********** Transport PCR **********");
  }
  if (t_blnSPRIselectAndBufferEBplated == ASWGLOBAL::BOOL::FALSE)
  {
    MECC::TraceComment("Group start - ********** Transport MIDI **********");
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_MIDIStack01, t_trpMIDI_Pipette03, ASWGLOBAL::BOOL::TRUE, 4, 2);
    SeqIncrement(t_trpMIDI_MIDIStack01, 1);
    MECC::TraceComment("Group end - ********** Transport MIDI **********");
    MECC::TraceComment("Group start - ********** Plate out Buffer EB to Intermediate MIDI plate **********");
    DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Prepare Buffer EB plate"), ASWGLOBAL::BOOL::TRUE);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, ML_STAR.RGT20ml_04);
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, t_seqIntermediateDispense_BufferEB);
    PIPETTING_CONTROLLER::PIP_Channels(ML_STAR, t_seqBufferEB, t_seqIntermediateDispense_BufferEB, t_arr_fltVolumeSource_BufferEB.ElementAt( 1 -1), Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_BufferEBPlate_JE"), 0, 0, 0, 0, 20.0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, 0);
    MECC::TraceComment("Group end - ********** Plate out Buffer EB to Intermediate MIDI plate **********");
    MECC::TraceComment("Group start - ********** Transport MIDI **********");
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_HHS05, ASWGLOBAL::BOOL::FALSE, 4, 2);
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_MIDIStack01, t_trpMIDI_Pipette03, ASWGLOBAL::BOOL::TRUE, 4, 2);
    SeqIncrement(t_trpMIDI_MIDIStack01, 1);
    MECC::TraceComment("Group end - ********** Transport MIDI **********");
    MECC::TraceComment("Group start - ********** Plate out SPRIselect to Intermediate MIDI plate **********");
    DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Prepare SPRI plate"), ASWGLOBAL::BOOL::TRUE);
    l_fltVolumeMix = t_arr_fltVolumeTubes_SPRIselect.ElementAt( 1 -1) * 0.7 / (8 * 1.0);
    l_fltVolumeMix = MthMin(l_fltVolumeMix, 300.0);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("Volume base: "), t_arr_fltVolumeTubes_SPRIselect.ElementAt( 1 -1), Translate(" --- "), Translate("calc mix volume:"), l_fltVolumeMix, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    PIPETTING_CONTROLLER::PIP_Channels_MixBeadsByOverturn(ML_STAR, t_seqSPRItrough, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_SPRImix_SE"), 5, 5, 50.0, l_fltVolumeMix, 3.0, 3.0, 3.0, l_strError);
    PIPETTING_CONTROLLER::PIP_Channels(ML_STAR, t_seqSPRIselect, t_seqIntermediateDispense_SPRIselect, t_arr_fltVolumeSource_SPRIselect.ElementAt( 1 -1), Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_SPRIBlowout_SE"), 10, t_arr_fltVolumeSource_SPRIselect.ElementAt( 1 -1), 0, 0, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
    t_blnSPRIselectAndBufferEBplated = ASWGLOBAL::BOOL::TRUE;
    MECC::TraceComment("Group end - ********** Plate out SPRIselect to Intermediate MIDI plate **********");
    MECC::TraceComment("Group start - ********** Transport MIDI **********");
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_CPAC03, ASWGLOBAL::BOOL::TRUE, 4, 2);
    MECC::TraceComment("Group end - ********** Transport MIDI **********");
  }
  if (t_arrBlnProcessActivation.ElementAt( 5 -1) == 1)
  {
    SeqCopySequence(l_trpLidSequence, t_trpLid_Waste_inverted);
    __WaitODTCProtocolAsync(t_trpPCR_ODTC, t_trpLid_ODTC, t_trpPCR_Pipette02, l_trpLidSequence);
    t_intIndexODTCMethod = 5;
    INHECOODTC_CONTROLLER::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, t_arrODTCProtocols.ElementAt( t_intIndexODTCMethod -1), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
  }
  MECC::TraceComment("Group start - ********** Transport MIDI **********");
  TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_CPAC03, t_trpMIDI_Pipette03, ASWGLOBAL::BOOL::TRUE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport MIDI **********");
  MECC::TraceComment("Group start - ********** Transfer 1st SPRIselect **********");
  l_fltFixedHeight = 7.6;
  l_fltVolumeMix = t_fltVolumeSPRIselectTracking * 0.7;
  l_fltVolumeMix = MthMin(l_fltVolumeMix, 300.0);
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" l_fltVolumeMix: "), l_fltVolumeMix, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqIntermediateAspirateMPH_SPRIselect, t_seqIntermediateAspirateMPH_SPRIselect, 0, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_SPRImix_SE"), 15, 0, l_fltVolumeMix, 0, 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqIntermediateAspirateMPH_SPRIselect, t_seqProcessMPH_SPRIselectPCR02, t_fltVolume_SPRI_1_P6, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_SPRI_SE"), 10, 30, t_fltVolume_SPRI_1_P6, t_fltVolume_Mix_1_P6, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltVolume_SPRI_1_P6;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  t_fltVolumeSPRIselectTracking = t_fltVolumeSPRIselectTracking - t_fltVolume_SPRI_1_P6;
  MECC::TraceComment("Group end - ********** Transfer 1st SPRIselect **********");
  MECC::TraceComment("Group start - ********** Begin 1st SPRIselect RT Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 300, 2);
  MECC::TraceComment("Group end - ********** Begin 1st SPRIselect RT Incubation **********");
  MECC::TraceComment("Group start - ********** Transfer 2nd SPRIselect **********");
  l_fltFixedHeight = 0.5;
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqIntermediateAspirateMPH_SPRIselect, t_seqProcessMPH_SPRIselectPCR01, t_fltVolume_SPRI_2_P6, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_SPRI_SE"), 0, 0, t_fltVolume_SPRI_2_P6, 0, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeSPRIselectTracking = t_fltVolumeSPRIselectTracking - t_fltVolume_SPRI_2_P6;
  MECC::TraceComment("Group end - ********** Transfer 2nd SPRIselect **********");
  MECC::TraceComment("Group start - ********** Complete 1st SPRIselect RT Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 300, 3);
  MECC::TraceComment("Group end - ********** Complete 1st SPRIselect RT Incubation **********");
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Pipette02, t_trpPCR_Magnet, ASWGLOBAL::BOOL::FALSE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment("Group start - ********** Begin 1st SPRIselect Mag Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 180, 2);
  MECC::TraceComment("Group end - ********** Begin 1st SPRIselect Mag Incubation **********");
  MECC::TraceComment("Group start - ********** Transport MIDI **********");
  TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_CPAC03, ASWGLOBAL::BOOL::FALSE, 4, 2);
  TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_HHS05, t_trpMIDI_Pipette03, ASWGLOBAL::BOOL::TRUE, 4, 2);
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  MECC::TraceComment("Group end - ********** Transport MIDI **********");
  MECC::TraceComment("Group start - ********** Complete 1st SPRIselect Mag Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 180, 3);
  MECC::TraceComment("Group end - ********** Complete 1st SPRIselect Mag Incubation **********");
  MECC::TraceComment("Group start - ********** Transfer 1st SPRIselect Supernatant **********");
  l_fltFixedHeight = 10.3;
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix_AspirateAll(ML_STAR, t_seqPCR_Magnet, t_seqProcessMPH_SPRIselectPCR01, t_fltVolume_Supernatant_1_P6, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_ProductPlateToPlate_SE"), 0, 30, 0, t_fltVolume_Mix_2_P6, l_fltFixedHeight, 2.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = t_fltVolume_SPRI_2_P6 + t_fltVolume_Supernatant_1_P6;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer 1st SPRIselect Supernatant **********");
  MECC::TraceComment("Group start - ********** Begin 2nd SPRIselect RT Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 300, 2);
  MECC::TraceComment("Group end - ********** Begin 2nd SPRIselect RT Incubation **********");
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Magnet, t_trpPCR_Waste, ASWGLOBAL::BOOL::FALSE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment("Group start - ********** Complete 2nd SPRIselect RT Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 300, 3);
  MECC::TraceComment("Group end - ********** Complete 2nd SPRIselect RT Incubation **********");
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Pipette01, t_trpPCR_Magnet, ASWGLOBAL::BOOL::TRUE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment("Group start - ********** Begin 2nd SPRIselect Mag Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 180, 2);
  MECC::TraceComment("Group end - ********** Begin 2nd SPRIselect Mag Incubation **********");
  MECC::TraceComment("Group start - ********** Complete 2nd SPRIselect Mag Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 180, 3);
  MECC::TraceComment("Group end - ********** Complete 2nd SPRIselect Mag Incubation **********");
  MECC::TraceComment("Group start - ********** Transfer 2nd SPRIselect Supernatant **********");
  l_fltFixedHeight = 9.6;
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix_AspirateAll(ML_STAR, t_seqPCR_Magnet, t_seqMPH_LiquidWaste, t_fltVolume_Supernatant_2_P6, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_SupernatantWaste_JE"), 0, 0, 0, 0, l_fltFixedHeight, 20.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = t_fltVolumeTracking - t_fltVolume_Supernatant_2_P6;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer 2nd SPRIselect Supernatant **********");
  MECC::TraceComment("Group start - ********** Transfer 1st EtOH **********");
  l_fltFixedHeight = 14.0;
  l_fltVolumeMix = t_fltVolume_EtOH_P6 * 0.5;
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqDWP_Pipette04, t_seqPCR_Magnet, t_fltVolume_EtOH_P6, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_EtOH_JE"), 3, 0, l_fltVolumeMix, 0, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeTracking = t_fltVolume_EtOH_P6;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 25.0, 2);
  l_fltRestHeight = t_flt_Z_Magnet + l_fltFixedHeight;
  l_fltRestHeight = l_fltRestHeight - 1.5;
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 25.0, 3);
  MECC::TraceComment("Group end - ********** Transfer 1st EtOH **********");
  MECC::TraceComment("Group start - ********** Transfer 1st EtOH Supernatant **********");
  l_fltFixedHeight = 13.7;
  PIPETTING_CONTROLLER::PIP_MPH_DoubleAspiration_TipControl(ML_STAR, t_seqPCR_Magnet, t_seqMPH_LiquidWaste, t_fltVolume_EtOH_P6, 20.0, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_EtOHWaste_JE"), 0, 0, 0, l_fltFixedHeight, 0.3, 20.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = 0.0;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer 1st EtOH Supernatant **********");
  MECC::TraceComment("Group start - ********** Transfer 2nd EtOH **********");
  l_fltFixedHeight = 14.0;
  l_fltVolumeMix = t_fltVolume_EtOH_P6 * 0.5;
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqDWP_Pipette04, t_seqPCR_Magnet, t_fltVolume_EtOH_P6, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_EtOH_JE"), 3, 0, l_fltVolumeMix, 0, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeTracking = t_fltVolume_EtOH_P6;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 25.0, 2);
  l_fltRestHeight = t_flt_Z_Magnet + l_fltFixedHeight;
  l_fltRestHeight = l_fltRestHeight - 1.5;
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 25.0, 3);
  MECC::TraceComment("Group end - ********** Transfer 2nd EtOH **********");
  MECC::TraceComment("Group start - ********** Transfer 2nd EtOH Supernatant **********");
  l_fltFixedHeight = 13.7;
  PIPETTING_CONTROLLER::PIP_MPH_DoubleAspiration_TipControl(ML_STAR, t_seqPCR_Magnet, t_seqMPH_LiquidWaste, t_fltVolume_EtOH_P6, 20.0, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_EtOHWaste_JE"), 0, 0, 0, l_fltFixedHeight, 0.3, 20.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = 0.0;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer 2nd EtOH Supernatant **********");
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Magnet, t_trpPCR_Pipette02, ASWGLOBAL::BOOL::TRUE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment("Group start - ********** Transfer Buffer EB **********");
  l_fltFixedHeight = 2.0;
  l_intCurrentPosition = t_seqIntermediateAspirateChannels_BufferEB.GetCurrentPosition();
  if (l_intCurrentPosition > 0)
  {
    PIPETTING_CONTROLLER::PIP_Channels_ExpandedMix(ML_STAR, t_seqIntermediateAspirateChannels_BufferEB, t_seqProcessChannels_BufferEB, t_fltVolume_BufferEB_P6, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_BufferEB_SE"), 0, 30, 0, t_fltVolume_Mix_3_P6, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
  }
  l_intCurrentPosition = t_seqIntermediateAspirateMPH_BufferEB.GetCurrentPosition();
  if (l_intCurrentPosition > 0)
  {
    PIPETTING_CONTROLLER::PIP_MPH_StampAdvance_ExpandedMix(ML_STAR, t_seqIntermediateAspirateMPH_BufferEB, t_seqProcessMPH_BufferEB, t_fltVolume_BufferEB_P6, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_BufferEB_SE"), 0, 30, 0, t_fltVolume_Mix_3_P6, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  t_fltVolumeTracking = t_fltVolume_BufferEB_P6;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer Buffer EB **********");
  MECC::TraceComment("Group start - ********** Begin Elution Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 120, 2);
  MECC::TraceComment("Group end - ********** Begin Elution Incubation **********");
  MECC::TraceComment("Group start - ********** Transport MIDI **********");
  TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_HHS05, ASWGLOBAL::BOOL::FALSE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport MIDI **********");
  MECC::TraceComment("Group start - ********** Complete Elution Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 120, 3);
  MECC::TraceComment("Group end - ********** Complete Elution Incubation **********");
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Pipette02, t_trpPCR_Magnet, ASWGLOBAL::BOOL::FALSE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment("Group start - ********** Begin Elution Mag Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 180, 2);
  MECC::TraceComment("Group end - ********** Begin Elution Mag Incubation **********");
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_PCRStack01, t_trpPCR_Pipette02, ASWGLOBAL::BOOL::TRUE, 4, 2);
  SeqIncrement(t_trpPCR_PCRStack01, 1);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment("Group start - ********** Complete Elution Mag Incubation **********");
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 180, 3);
  MECC::TraceComment("Group end - ********** Complete Elution Mag Incubation **********");
  MECC::TraceComment("Group start - ********** Transfer Eluate **********");
  l_fltFixedHeight = 1.0;
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqPCR_Magnet, t_seqPCR_Pipette02, t_fltVolume_Supernatant_3_P6, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_ProductPlateToPlate_SE"), 0, 0, 0, 0, l_fltFixedHeight, 1.0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = t_fltVolume_Supernatant_3_P6;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer Eluate **********");
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  MECC::TraceComment("Group start - ********** Transport PCR **********");
  TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Magnet, t_trpPCR_Waste, ASWGLOBAL::BOOL::FALSE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport PCR **********");
  MECC::TraceComment(Translate("SAFE STOPPING POINT\nIf you are stopping, store at 2캜 to 8캜 for up to 2 days. Alternatively, leave on the thermal cycler for up to 24 hours."));
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strMethodName, Translate(""));
}

private function Process05_SampleIndexPCR(  ) void {
  private variable l_intCurrentPosition;
  private sequence l_trpLidSequence;
  private variable l_fltFixedHeight;
  private variable l_arr_fltAspiration[];
  private variable l_strMessageExternalThermalCycling_1;
  private variable l_strMessageExternalThermalCycling_2;
  private variable l_strLoadingImagePath;
  t_strFunctionName = GetFunctionName();
  DATA_CONTROLLER::Start_Function(t_strFunctionName, ASWGLOBAL::BOOL::TRUE);
  VENUSTEXTTOSPEECH::Run(t_strFunctionName);
  JSONRUNREPORT::Add_TimeStamp(t_strFunctionName);
  t_fltVolumeTracking = t_fltVolume_Supernatant_P4;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  __ReviewORReloadStockOfTips(0, t_intRequiredNumberOf300uLTipsProcess05, 0);
  if (t_blnIndexplateLoaded == ASWGLOBAL::BOOL::TRUE&& t_blnIndexPlateSecured == ASWGLOBAL::BOOL::FALSE)
  {
    MECC::TraceComment("Group start - ********** Transport Index **********");
    TRANSPORT_CONTROLLER::Trp_PCR(ML_STAR, t_trpPCR_Pipette01, t_trpPCR_HHS01, ASWGLOBAL::BOOL::FALSE, 4, 2);
    t_blnIndexPlateSecured = ASWGLOBAL::BOOL::TRUE;
    MECC::TraceComment("Group end - ********** Transport Index **********");
  }
  if (t_blnMasterMixPlated == ASWGLOBAL::BOOL::FALSE)
  {
    MECC::TraceComment("Group start - ********** Transport MIDI **********");
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_MIDIStack01, t_trpMIDI_CPAC02, ASWGLOBAL::BOOL::TRUE, 4, 2);
    SeqIncrement(t_trpMIDI_MIDIStack01, 1);
    MECC::TraceComment("Group end - ********** Transport MIDI **********");
  }
  MECC::TraceComment("Group start - ********** Plate out reagents to Intermediate MIDI plate **********");
  DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Prepare Library Amp Mix"), ASWGLOBAL::BOOL::TRUE);
  if (t_arr_fltVolumeSource_LibraryAmpMix.ElementAt( 1 -1) > 300.0)
  {
    l_arr_fltAspiration=t_arr_fltVolumeSource_LibraryAmpMix;
    {//Reduce the source volume array for 2x transfer due to tip capacity
      variable i, j, bucket;
      j = l_arr_fltAspiration.GetSize();
      for(i = 1;i <= j;i++){
           bucket = l_arr_fltAspiration.GetAt(i - 1) / 2.0;
           l_arr_fltAspiration.SetAt(i - 1, bucket);
         }
    }
    HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
    PIPETTING_CONTROLLER::PIP_Channels_WithVolumeArray_ExpandedMix(ML_STAR, t_seqLibraryAmpMix, t_seqIntermediateDispense_LibraryAmpMix_Create, l_arr_fltAspiration, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_LibrayAmpMixMM_SE"), 0, 0, l_arr_fltAspiration, l_arr_fltAspiration, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
    HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
    HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
    PIPETTING_CONTROLLER::PIP_Channels_WithVolumeArray_ExpandedMix(ML_STAR, t_seqLibraryAmpMix, t_seqIntermediateDispense_LibraryAmpMix_Create, l_arr_fltAspiration, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_LibrayAmpMixMM_SE"), 0, 0, l_arr_fltAspiration, l_arr_fltAspiration, 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
    HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
  }
  else
  {
    HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
    PIPETTING_CONTROLLER::PIP_Channels_WithVolumeArray_ExpandedMix(ML_STAR, t_seqLibraryAmpMix, t_seqIntermediateDispense_LibraryAmpMix_Create, t_arr_fltVolumeSource_LibraryAmpMix, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_LibrayAmpMixMM_SE"), 0, 0, t_arr_fltVolumeSource_LibraryAmpMix, t_arr_fltVolumeSource_LibraryAmpMix, 0, 0.5, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
    HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
  }
  t_blnMasterMixPlated = ASWGLOBAL::BOOL::TRUE;
  INHECOTEC_CONTROLLER::TEC_SetTemperature(20, t_intDeviceID_CPAC01);
  INHECOTEC_CONTROLLER::TEC_SetTemperature(20, t_intDeviceID_CPAC02);
  MECC::TraceComment("Group end - ********** Plate out reagents to Intermediate MIDI plate **********");
  MECC::TraceComment("Group start - ********** Transport MIDI **********");
  TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_CPAC02, t_trpMIDI_Pipette03, ASWGLOBAL::BOOL::TRUE, 4, 2);
  MECC::TraceComment("Group end - ********** Transport MIDI **********");
  MECC::TraceComment("Group start - ********** Transfer Library Amp Mix **********");
  l_fltFixedHeight = 3.1;
  l_intCurrentPosition = t_seqIntermediateAspirateChannels_LibraryAmpMix.GetCurrentPosition();
  if (l_intCurrentPosition > 0)
  {
    HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
    PIPETTING_CONTROLLER::PIP_Channels_ExpandedMix(ML_STAR, t_seqIntermediateAspirateChannels_LibraryAmpMix, t_seqProcessChannels_LibraryAmpMix, t_fltVolume_LibraryAmpMix, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_LibrayAmpMix_SE"), 0, 3, 0, t_fltVolume_LibraryAmpMix, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, 0);
    HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
  }
  l_intCurrentPosition = t_seqIntermediateAspirateMPH_LibraryAmpMix.GetCurrentPosition();
  if (l_intCurrentPosition > 0)
  {
    PIPETTING_CONTROLLER::PIP_MPH_StampAdvance_ExpandedMix(ML_STAR, t_seqIntermediateAspirateMPH_LibraryAmpMix, t_seqProcessMPH_LibraryAmpMix, t_fltVolume_LibraryAmpMix, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_LibrayAmpMix_SE"), 0, 3, 0, t_fltVolume_LibraryAmpMix, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltVolume_LibraryAmpMix;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer Library Amp Mix **********");
  MECC::TraceComment("Group start - ********** Transfer Dual Index TT Set A **********");
  l_fltFixedHeight = 6.6;
  HAMILTONHEATERSHAKER_CONTROLLER::HHS_Lock(1, ASWGLOBAL::BOOL::TRUE);
  HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
  PIPETTING_CONTROLLER::PIP_Channels_ExpandedMix(ML_STAR, t_seqIndexPlate, t_seqPCR_Pipette02, t_fltVolume_DualIndex, Translate("10x_ChromiumGEM-XSingleCell3-5_1000PC_300Tip_FB_DualIndexTTSetA_SE"), 0, 10, 0, 90.0, 2.0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, 0);
  HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltVolume_DualIndex;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  HAMILTONHEATERSHAKER_CONTROLLER::HHS_Lock(1, ASWGLOBAL::BOOL::FALSE);
  MECC::TraceComment("Group end - ********** Transfer Dual Index TT Set A **********");
  MECC::TraceComment("Group start - ********** Incubation in ODTC **********");
  if (t_blnExternalThermalcycling == ASWGLOBAL::BOOL::FALSE)
  {
    SeqCopySequence(l_trpLidSequence, t_trpLid_Waste_inverted);
    __WaitODTCProtocolAsync_NoTransport(Translate(""));
    t_intIndexODTCMethod = 6;
    __RunODTCProtocolAsync(t_trpPCR_Pipette02, t_trpLid_LidStack01, t_trpPCR_ODTC, t_trpLid_ODTC, t_trpPCR_Pipette02, t_arrODTCProtocols.ElementAt( t_intIndexODTCMethod -1), 0, Translate(""));
    SeqIncrement(t_trpLid_LidStack01, 1);
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_CPAC02, ASWGLOBAL::BOOL::TRUE, 4, 2);
    TIPMANAGEMENTLIBRARY::Channel_DefragmentTipSequence(ML_STAR, t_strTipCounterNameTip300, TIP_TOOLS::DefragmentationDirection::ColumnWise);
    ML_STAR._13722C3E_1C8F_4237_BFAF_A7CE81549723("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"); // WaitForTadmUpload
    if (t_arrBlnProcessActivation.ElementAt( 6 -1) == 0)
    {
      __WaitODTCProtocolAsync(t_trpPCR_ODTC, t_trpLid_ODTC, t_trpPCR_Pipette02, l_trpLidSequence);
      t_intIndexODTCMethod = 5;
      INHECOODTC_CONTROLLER::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, t_arrODTCProtocols.ElementAt( t_intIndexODTCMethod -1), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
  }
  else
  {
    TRANSPORT_CONTROLLER::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette03, t_trpMIDI_CPAC02, ASWGLOBAL::BOOL::TRUE, 4, 2);
    l_strMessageExternalThermalCycling_1 = StrConcat12(Translate("External PCR."), Translate("\n\n"), Translate("- Please retrieve the sample plate from position 2 of the processing carrier."), Translate(""), Translate("\n\n"), Translate(""), Translate(""), Translate(""), Translate("- Press OK to reload the processing carrier while external incubation is performed."), Translate(""), Translate("\n\n"), Translate("CANCEL will abort the run"));
    l_strMessageExternalThermalCycling_2 = StrConcat12(Translate("External PCR."), Translate("\n\n"), Translate("- Please replace the sample plate to position 2 of the processing carrier."), Translate(""), Translate("\n\n"), Translate(""), Translate(""), Translate(""), Translate("- Press OK to continue the method."), Translate(""), Translate("\n\n"), Translate("CANCEL will abort the run"));
    l_strLoadingImagePath = StrConcat12(t_strKitDirectory, Translate("\\"), Translate("Files"), Translate("\\"), Translate("LoadingPictures"), Translate("\\"), Translate("PlateTipCarrierMOA.png"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    __ExternalThermalcycling(Translate("Processing_Carrier"), l_strMessageExternalThermalCycling_1, l_strMessageExternalThermalCycling_2, l_strLoadingImagePath);
  }
  MECC::TraceComment("Group end - ********** Incubation in ODTC **********");
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, t_strFunctionName, t_strMethodName, Translate(""));
}

private function Test(  ) void {
  private dialog dialogHandle_1;
  private dialog dialogHandle_2;
  private variable l_fltVolumeMix;
  private variable l_fltRestHeight;
  private variable l_fltFixedHeight;
  private timer l_hdlTimer;
  MECC::TraceComment("Group start - ********** Transfer 1st EtOH **********");
  l_fltFixedHeight = 11.5;
  l_fltVolumeMix = t_fltVolume_EtOH_P2 * 0.5;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" l_fltVolumeMix: "), l_fltVolumeMix, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqDWP_Pipette04, t_seqPCR_Magnet, t_fltVolume_EtOH_P2, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_EtOH_JE"), 3, 0, l_fltVolumeMix, 0, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeTracking = t_fltVolume_EtOH_P2;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 25.0, 2);
  l_fltRestHeight = t_flt_Z_Magnet + l_fltFixedHeight;
  l_fltRestHeight = l_fltRestHeight - 1.5;
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 25.0, 3);
  MECC::TraceComment("Group end - ********** Transfer 1st EtOH **********");
  MECC::TraceComment("Group start - ********** Transfer 1st EtOH Supernatant **********");
  l_fltFixedHeight = 8.8;
  PIPETTING_CONTROLLER::PIP_MPH_DoubleAspiration_TipControl(ML_STAR, t_seqPCR_Magnet, t_seqMPH_LiquidWaste, t_fltVolume_EtOH_P2, 5.0, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_EtOHWaste_JE"), 0, 0, 0, l_fltFixedHeight, 0.3, 20.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = 0.0;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer 1st EtOH Supernatant **********");
  MECC::TraceComment("Group start - ********** Transfer 2nd EtOH **********");
  l_fltFixedHeight = 11.5;
  l_fltVolumeMix = t_fltVolume_EtOH_P2 * 0.5;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" l_fltVolumeMix: "), l_fltVolumeMix, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  PIPETTING_CONTROLLER::PIP_MPH_TipControl_ExpandedMix(ML_STAR, t_seqDWP_Pipette04, t_seqPCR_Magnet, t_fltVolume_EtOH_P2, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_EtOH_JE"), 3, 0, l_fltVolumeMix, 0, 0, l_fltFixedHeight, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeTracking = t_fltVolume_EtOH_P2;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 25.0, 2);
  l_fltRestHeight = t_flt_Z_Magnet + l_fltFixedHeight;
  l_fltRestHeight = l_fltRestHeight - 1.5;
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  DATA_CONTROLLER::Timer_Incubation(l_hdlTimer, 25.0, 3);
  MECC::TraceComment("Group end - ********** Transfer 2nd EtOH **********");
  MECC::TraceComment("Group start - ********** Transfer 2nd EtOH Supernatant **********");
  l_fltFixedHeight = 8.8;
  PIPETTING_CONTROLLER::PIP_MPH_DoubleAspiration_TipControl(ML_STAR, t_seqPCR_Magnet, t_seqMPH_LiquidWaste, t_fltVolume_EtOH_P2, 5.0, Translate("10x_ChromiumGEM-XSingleCell3-5_1000MPH_300Tip_FB_EtOHWaste_JE"), 0, 0, 0, l_fltFixedHeight, 0.3, 20.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = 0.0;
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, t_strTraceTag, Translate(" Volume Tracking: "), t_fltVolumeTracking, Translate(" 킠 "), t_strTraceTag, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment("Group end - ********** Transfer 2nd EtOH Supernatant **********");
  abort;
  __WaitODTCProtocolAsync_NoTransport(Translate(""));
  dialogHandle_1.SetOutput(Translate("pause"));
  dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  __RunODTCProtocol(t_arrODTCProtocols.ElementAt( 5 -1), 0, Translate(""));
  __WaitODTCProtocolAsync_NoTransport(Translate(""));
  dialogHandle_2.SetOutput(Translate("pause"));
  dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  __RunODTCProtocol(t_arrODTCProtocols.ElementAt( 6 -1), 0, Translate(""));
  __WaitODTCProtocolAsync_NoTransport(Translate(""));
}

private function __WaitODTCProtocolAsync_NoTransport( variable i_strDialogMessage ) void {
  private variable l_strFunctionName;
  l_strFunctionName = Translate("");
  l_strFunctionName = GetFunctionName();
  DATA_CONTROLLER::Start_Function(l_strFunctionName, ASWGLOBAL::BOOL::FALSE);
  INHECOODTC_CONTROLLER::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
  INHECOODTC_CONTROLLER::ODTC_OpenDoor(t_intDeviceNumberODTC);
  TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_strFunctionName, t_strMethodName, Translate(""));
}

private function _SetupTipSupportBlock(  ) void {
  private variable l_intReturnValueSetup;
  l_intReturnValueSetup = TIPMANAGEMENTLIBRARY::MPH96_SetupTipSupport(ML_STAR.TipSupport, ML_STAR.MPH_Waste);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("l_intReturnValueSetup: "), l_intReturnValueSetup);
  DATA_CONTROLLER::Reportfile_UpdateData(Translate("- Cleanup TipSupport Block"), ASWGLOBAL::BOOL::TRUE);
  PIPETTING_CONTROLLER::PIP_MPH_CleanUpTipSupport(ML_STAR, ASWGLOBAL::BOOL::FALSE);
}
