#pragma once
#include "HSLStrLib.hsl"
#include "STAR_Firmware_Channel_Control.hs_"
#include "HSLSeqLib.hsl"
#include "SMTs\\Tip Present Check_5ml_1ml_V2.hs_"
#include "HSLMthLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLUtilLib2.hsl"
#include "Labware Properties\\Labware_Property_Query.hs_"
#include "HSLFilLib.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLGetSerialNumber.hsl"
#include "HSLExtensions\\Array.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace MOVEMENT_CONTROLLER {
  variable flt_TipLength;
  function Abstract(  ) void ;
  function CheckIfTipsPresent( device & ML_STAR, variable & o_str_ChannelPatternOfTips ) variable ;
  function CheckPlateWithTwoChannels( device & ML_STAR, variable i_str_LabwareToCheck, variable & o_flt_PlateHeight ) variable ;
  function CreateMaximumYForWorkingChannel( device & ML_STAR ) void ;
  function EjectTeachingTip( device & ML_STAR, sequence & io_seqTeachingTips ) void ;
  function FindWellCenter( device & ML_STAR, variable i_flt_MinSearchZ, variable i_flt_SafeHeight, variable i_flt_WellWidth, variable & o_flt_XCenter, variable & o_flt_YCenter, variable & o_flt_ContainerZMax, variable & o_flt_XWidth, variable & o_flt_YWidth ) void ;
  function GetCLLDStatus( device & ML_STAR, variable & o_int_CLLDStatus ) void ;
  function GetChannelPosition( device & ML_STAR, variable & o_flt_XCoord, variable & o_flt_YCoord, variable & o_flt_ZCoord ) void ;
  function GetStopDiskZCoord( device & ML_STAR, variable & o_flt_ZCoord ) void ;
  function GetTeachingTips( device & ML_STAR, variable i_str_ChannelPattern, sequence i_seq_TipPosition ) void ;
  function GetXArmRange( device & ML_STAR, variable & o_flt_LeftXMin, variable & o_flt_LeftXMax, variable & o_flt_RightXMin, variable & o_flt_RightXMax ) void ;
  function LockDoors( device & ML_STAR, variable i_bln_LockDoor ) void ;
  function ManuallyMoveChannel( device & ML_STAR, variable i_str_TeachLabware, variable i_str_TeachPosition ) void ;
  function ManuallyMoveChannel_WithDescription( device & ML_STAR, variable i_str_TeachLabware, variable i_str_TeachPosition, variable i_str_Instruction ) void ;
  function ManuallyMoveChannel_WithDescription_Config( device & ML_STAR, variable i_str_TeachLabware, variable i_str_TeachPosition, variable i_str_Instruction, variable i_bool_XMovementValid, variable i_bool_YMovementValid, variable i_bool_ZMovementValid ) void ;
  function MoveChannelToPosition( device & ML_STAR, variable i_flt_TraverseHeight, variable i_flt_XCoord, variable i_flt_YCoord, variable i_flt_ZCoord ) void ;
  function MoveChannelToXCoord( device & ML_STAR, variable i_flt_XCoord ) void ;
  function MoveChannelToYCoord( device & ML_STAR, variable i_flt_YCoord ) void ;
  function MoveChannelToZCoord( device & ML_STAR, variable i_flt_ZCoord ) void ;
  function MoveChannelsToPosition( device & ML_STAR, variable i_str_ChannelPattern, variable i_flt_TraverseHeight, variable i_flt_XCoord, variable & i_arr_YCoords[], variable & i_arr_ZCoords[] ) void ;
  function MoveMPH96ToBack( device & ML_STAR ) void ;
  function MoveRightArmToXCoord( device & ML_STAR, variable i_flt_XCoord ) void ;
  function SearchForCLLD_X( device & ML_STAR, variable i_flt_DistanceToSearch, variable i_int_DirectionToSearch, variable & o_flt_XCoordinateFound ) variable ;
  function SearchForCLLD_Y( device & ML_STAR, variable i_flt_DistanceToSearch, variable i_int_DirectionToSearch, variable & o_flt_YCoordinateFound ) variable ;
  function SearchForCLLD_Z( device & ML_STAR, variable i_flt_ZMin, variable i_flt_LLDSearchHeight, variable i_flt_ImmersionDepth, variable i_int_ImmersionDirection, variable & o_flt_ZCoordinateFound ) void ;
  function SearchZHeight( device & ML_STAR, variable i_bool_UseSlowSpeed, variable i_flt_MinZHeight, variable & o_flt_ZHeightFound ) variable ;
  function TurnCLLDOnOff( device & ML_STAR, variable i_bln_TurnOn ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_FIRMWARE_CHANNEL_CONTROL::_InitLibrary();
    TIP_PRESENT_CHECK_5ML_1ML_V2::_InitLibrary();
    LPQ::_InitLibrary();
  }
  function _ExitLibrary() {
    STAR_FIRMWARE_CHANNEL_CONTROL::_ExitLibrary();
    TIP_PRESENT_CHECK_5ML_1ML_V2::_ExitLibrary();
    LPQ::_ExitLibrary();
  }

  function Abstract(  ) void {
    private variable str_CurrentVersion;
    str_CurrentVersion = Translate("2.1.1");
    Trace("Movement Controler Version:  ",str_CurrentVersion);
    STAR_FIRMWARE_CHANNEL_CONTROL::Abstract();
  }

  function EjectTeachingTip( device & ML_STAR, sequence & io_seqTeachingTips ) void {
    private variable bool_TipLoaded;
    private variable str_ChannelPattern;
    MECC::TraceComment(Translate("=================================== EjectTeachingTip - START"));
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    bool_TipLoaded = TIP_PRESENT_CHECK_5ML_1ML_V2::Check_Tips_Present_1ml(ML_STAR, str_ChannelPattern, 8);
    STAR_FIRMWARE_CHANNEL_CONTROL::Reset_Search_Z(ML_STAR);
    if (bool_TipLoaded == 1)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    flt_TipLength = 0.0;
    MECC::TraceComment(Translate("=================================== EjectTeachingTip - FINISH"));
  }

  function ManuallyMoveChannel( device & ML_STAR, variable i_str_TeachLabware, variable i_str_TeachPosition ) void {
    private dialog dialogHandle_1;
    private dialog customDialog_2;
    private variable bol_Visible;
    private variable int_DistanceSelection;
    private variable flt_Offset_X;
    private variable flt_CurrentX;
    private variable int_MoveValue;
    private variable NotUsed;
    private variable flt_Offset_Y;
    private variable flt_CurrentY;
    private variable flt_MoveDistance;
    private variable flt_Offset_Z;
    private variable flt_CurrentZ;
    private variable str_X_Start;
    private variable str_Y_Start;
    private variable str_Z_Start;
    private variable str_CurrentX;
    private variable str_Offset_X;
    private variable str_CurrentY;
    private variable str_MoveButtonText;
    private variable retValueDialog;
    private variable str_CurrentZ;
    private variable str_Offset_Y;
    private variable int_ChannelNumber;
    private variable str_Offset_Z;
    private variable flt_X_Start;
    private variable flt_Z_Start;
    private variable flt_Y_Start;
    private variable str_TeachPositionMessage;
    private variable arr_MoveOptions[];
    private dialog customDialog_3;
    MECC::TraceComment(Translate("=================================== ManuallyMoveChannel - START"));
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    int_ChannelNumber = 8;
    DevGetLabwarePositionEx(ML_STAR, i_str_TeachLabware, i_str_TeachPosition, flt_X_Start, flt_Y_Start, flt_Z_Start, NotUsed);
    int_MoveValue = 0;
    bol_Visible = 0;
    str_MoveButtonText = Translate("Select Movement");
    int_DistanceSelection = 2;
    arr_MoveOptions.SetSize(0);
    arr_MoveOptions.AddAsLast(5.0);
    arr_MoveOptions.AddAsLast(1.0);
    arr_MoveOptions.AddAsLast(0.1);
    str_X_Start = StrFStrEx(flt_X_Start, 1, 5);
    str_Y_Start = StrFStrEx(flt_Y_Start, 1, 4);
    str_Z_Start = StrFStrEx(flt_Z_Start, 1, 4);
    flt_Offset_X = 0.0;
    flt_Offset_Y = 0.0;
    flt_Offset_Z = 0.0;
    str_TeachPositionMessage = StrConcat4(Translate("Move channel until tip is over position "), i_str_TeachPosition, Translate(" and press Measure"), Translate(""));
    {
      while (1 == 1)
      {
        STAR_FIRMWARE_CHANNEL_CONTROL::Get_Channel_Position(ML_STAR, int_ChannelNumber, flt_CurrentX, flt_CurrentY, flt_CurrentZ);
        flt_Offset_X = flt_CurrentX - flt_X_Start;
        flt_Offset_Y = flt_CurrentY - flt_Y_Start;
        flt_Offset_Z = flt_CurrentZ - flt_Z_Start;
        flt_Offset_X = MthRound(flt_Offset_X, 1);
        flt_Offset_Y = MthRound(flt_Offset_Y, 1);
        flt_Offset_Z = MthRound(flt_Offset_Z, 1);
        str_Offset_X = StrFStrEx(flt_Offset_X, 1, 5);
        str_Offset_Y = StrFStrEx(flt_Offset_Y, 1, 4);
        str_Offset_Z = StrFStrEx(flt_Offset_Z, 1, 4);
        str_CurrentX = StrFStrEx(flt_CurrentX, 1, 5);
        str_CurrentY = StrFStrEx(flt_CurrentY, 1, 4);
        str_CurrentZ = StrFStrEx(flt_CurrentZ, 1, 4);
        if(0){
          customDialog_2.InitCustomDialog("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");
          customDialog_2.SetCustomDialogProperty( "textBlock1.Text", str_TeachPositionMessage );
          customDialog_2.SetCustomDialogProperty( "textBlock5.Text", str_CurrentX );
          customDialog_2.SetCustomDialogProperty( "textBlock6.Text", str_CurrentY );
          customDialog_2.SetCustomDialogProperty( "textBlock7.Text", str_CurrentZ );
          customDialog_2.SetCustomDialogProperty( "textBlock11.Text", str_Offset_X );
          customDialog_2.SetCustomDialogProperty( "textBlock12.Text", str_Offset_Y );
          customDialog_2.SetCustomDialogProperty( "textBlock13.Text", str_Offset_Z );
          customDialog_2.SetCustomDialogProperty( "comboBox1.SelectedIndex", int_DistanceSelection );
          customDialog_2.SetCustomDialogProperty( "MoveButton.Content", str_MoveButtonText );
          customDialog_2.SetCustomDialogProperty( "A.IsVisible", bol_Visible );
          customDialog_2.SetCustomDialogProperty( "A.Value", int_MoveValue );
          customDialog_2.ShowCustomDialog();
          retValueDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
          int_DistanceSelection = customDialog_2.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
          str_MoveButtonText = customDialog_2.GetCustomDialogProperty( "MoveButton.Content" );
          int_MoveValue = customDialog_2.GetCustomDialogProperty( "A.Value" );
        }
        customDialog_3.InitCustomDialog("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");
        customDialog_3.SetCustomDialogProperty( "textBlock1.Text", str_TeachPositionMessage );
        customDialog_3.SetCustomDialogProperty( "textBlock5.Text", str_CurrentX );
        customDialog_3.SetCustomDialogProperty( "textBlock6.Text", str_CurrentY );
        customDialog_3.SetCustomDialogProperty( "textBlock7.Text", str_CurrentZ );
        customDialog_3.SetCustomDialogProperty( "textBlock11.Text", str_Offset_X );
        customDialog_3.SetCustomDialogProperty( "textBlock12.Text", str_Offset_Y );
        customDialog_3.SetCustomDialogProperty( "textBlock13.Text", str_Offset_Z );
        customDialog_3.SetCustomDialogProperty( "comboBox1.SelectedIndex", int_DistanceSelection );
        customDialog_3.SetCustomDialogProperty( "MoveButton.Content", str_MoveButtonText );
        customDialog_3.SetCustomDialogProperty( "A.IsVisible", bol_Visible );
        customDialog_3.SetCustomDialogProperty( "A.Value", int_MoveValue );
        customDialog_3.ShowCustomDialog();
        retValueDialog = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
        int_DistanceSelection = customDialog_3.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
        str_MoveButtonText = customDialog_3.GetCustomDialogProperty( "MoveButton.Content" );
        int_MoveValue = customDialog_3.GetCustomDialogProperty( "A.Value" );
        if (retValueDialog == 7)
        {
          MECC::TraceComment(Translate("MOVEMENT COMPETED"));
          break;
        }
        if (int_MoveValue == 0)
        {
          dialogHandle_1.SetOutput(Translate("Please choose a movement direction!"));
          dialogHandle_1.ShowOutput(Translate("Choose Direction!"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        if (retValueDialog == 1)
        {
          flt_MoveDistance=arr_MoveOptions.GetAt(int_DistanceSelection-1);
          if (int_MoveValue == 1)
          {
            Trace("----- MOVE X : -",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_X_Relative(ML_STAR, 1, flt_MoveDistance);
          }
          if (int_MoveValue == 2)
          {
            Trace("----- MOVE X : ",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_X_Relative(ML_STAR, 0, flt_MoveDistance);
          }
          if (int_MoveValue == 3)
          {
            Trace("----- MOVE Y : -",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_Y_Relative(ML_STAR, int_ChannelNumber, 1, flt_MoveDistance);
          }
          if (int_MoveValue == 4)
          {
            Trace("----- MOVE Y : ",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_Y_Relative(ML_STAR, int_ChannelNumber, 0, flt_MoveDistance);
          }
          if (int_MoveValue == 5)
          {
            Trace("----- MOVE Z : -",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_Z_Relative(ML_STAR, int_ChannelNumber, 1, flt_MoveDistance);
          }
          if (int_MoveValue == 6)
          {
            Trace("----- MOVE Z : ",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_Z_Relative(ML_STAR, int_ChannelNumber, 0, flt_MoveDistance);
          }
        }
      }
    }
    MECC::TraceComment(Translate("=================================== ManuallyMoveChannel - FINISH"));
  }

  function ManuallyMoveChannel_WithDescription( device & ML_STAR, variable i_str_TeachLabware, variable i_str_TeachPosition, variable i_str_Instruction ) void {
    private dialog dialogHandle_4;
    private dialog customDialog_5;
    private variable bol_Visible;
    private variable int_DistanceSelection;
    private variable flt_CurrentX;
    private variable int_MoveValue;
    private variable flt_Offset_X;
    private variable NotUsed;
    private variable flt_CurrentY;
    private variable flt_Offset_Y;
    private variable flt_CurrentZ;
    private variable flt_Offset_Z;
    private variable flt_MoveDistance;
    private variable str_X_Start;
    private variable str_Y_Start;
    private variable str_Z_Start;
    private variable str_CurrentX;
    private variable str_Offset_X;
    private variable str_MoveButtonText;
    private variable retValueDialog;
    private variable str_CurrentY;
    private variable str_CurrentZ;
    private variable str_Offset_Y;
    private variable int_ChannelNumber;
    private variable str_Offset_Z;
    private variable flt_X_Start;
    private variable flt_Z_Start;
    private variable flt_Y_Start;
    private variable arr_MoveOptions[];
    MECC::TraceComment(Translate("=================================== ManuallyMoveChannel - START"));
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    int_ChannelNumber = 8;
    DevGetLabwarePositionEx(ML_STAR, i_str_TeachLabware, i_str_TeachPosition, flt_X_Start, flt_Y_Start, flt_Z_Start, NotUsed);
    int_MoveValue = 0;
    bol_Visible = 0;
    str_MoveButtonText = Translate("Select Movement");
    int_DistanceSelection = 2;
    arr_MoveOptions.SetSize(0);
    arr_MoveOptions.AddAsLast(5.0);
    arr_MoveOptions.AddAsLast(1.0);
    arr_MoveOptions.AddAsLast(0.1);
    str_X_Start = StrFStrEx(flt_X_Start, 1, 5);
    str_Y_Start = StrFStrEx(flt_Y_Start, 1, 4);
    str_Z_Start = StrFStrEx(flt_Z_Start, 1, 4);
    flt_Offset_X = 0.0;
    flt_Offset_Y = 0.0;
    flt_Offset_Z = 0.0;
    {
      while (1 == 1)
      {
        STAR_FIRMWARE_CHANNEL_CONTROL::Get_Channel_Position(ML_STAR, int_ChannelNumber, flt_CurrentX, flt_CurrentY, flt_CurrentZ);
        flt_Offset_X = flt_CurrentX - flt_X_Start;
        flt_Offset_Y = flt_CurrentY - flt_Y_Start;
        flt_Offset_Z = flt_CurrentZ - flt_Z_Start;
        flt_Offset_X = MthRound(flt_Offset_X, 1);
        flt_Offset_Y = MthRound(flt_Offset_Y, 1);
        flt_Offset_Z = MthRound(flt_Offset_Z, 1);
        str_Offset_X = StrFStrEx(flt_Offset_X, 1, 5);
        str_Offset_Y = StrFStrEx(flt_Offset_Y, 1, 4);
        str_Offset_Z = StrFStrEx(flt_Offset_Z, 1, 4);
        str_CurrentX = StrFStrEx(flt_CurrentX, 1, 5);
        str_CurrentY = StrFStrEx(flt_CurrentY, 1, 4);
        str_CurrentZ = StrFStrEx(flt_CurrentZ, 1, 4);
        customDialog_5.InitCustomDialog("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");
        customDialog_5.SetCustomDialogProperty( "textBlock1.Text", i_str_Instruction );
        customDialog_5.SetCustomDialogProperty( "textBlock5.Text", str_CurrentX );
        customDialog_5.SetCustomDialogProperty( "textBlock6.Text", str_CurrentY );
        customDialog_5.SetCustomDialogProperty( "textBlock7.Text", str_CurrentZ );
        customDialog_5.SetCustomDialogProperty( "textBlock11.Text", str_Offset_X );
        customDialog_5.SetCustomDialogProperty( "textBlock12.Text", str_Offset_Y );
        customDialog_5.SetCustomDialogProperty( "textBlock13.Text", str_Offset_Z );
        customDialog_5.SetCustomDialogProperty( "comboBox1.SelectedIndex", int_DistanceSelection );
        customDialog_5.SetCustomDialogProperty( "MoveButton.Content", str_MoveButtonText );
        customDialog_5.SetCustomDialogProperty( "A.IsVisible", bol_Visible );
        customDialog_5.SetCustomDialogProperty( "A.Value", int_MoveValue );
        customDialog_5.ShowCustomDialog();
        retValueDialog = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
        int_DistanceSelection = customDialog_5.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
        str_MoveButtonText = customDialog_5.GetCustomDialogProperty( "MoveButton.Content" );
        int_MoveValue = customDialog_5.GetCustomDialogProperty( "A.Value" );
        if (retValueDialog == 7)
        {
          MECC::TraceComment(Translate("MOVEMENT COMPETED"));
          break;
        }
        if (int_MoveValue == 0)
        {
          dialogHandle_4.SetOutput(Translate("Please choose a movement direction!"));
          dialogHandle_4.ShowOutput(Translate("Choose Direction!"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        if (retValueDialog == 1)
        {
          flt_MoveDistance=arr_MoveOptions.GetAt(int_DistanceSelection-1);
          if (int_MoveValue == 1)
          {
            Trace("----- MOVE X : -",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_X_Relative(ML_STAR, 1, flt_MoveDistance);
          }
          if (int_MoveValue == 2)
          {
            Trace("----- MOVE X : ",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_X_Relative(ML_STAR, 0, flt_MoveDistance);
          }
          if (int_MoveValue == 3)
          {
            Trace("----- MOVE Y : -",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_Y_Relative(ML_STAR, int_ChannelNumber, 1, flt_MoveDistance);
          }
          if (int_MoveValue == 4)
          {
            Trace("----- MOVE Y : ",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_Y_Relative(ML_STAR, int_ChannelNumber, 0, flt_MoveDistance);
          }
          if (int_MoveValue == 5)
          {
            Trace("----- MOVE Z : -",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_Z_Relative(ML_STAR, int_ChannelNumber, 1, flt_MoveDistance);
          }
          if (int_MoveValue == 6)
          {
            Trace("----- MOVE Z : ",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_Z_Relative(ML_STAR, int_ChannelNumber, 0, flt_MoveDistance);
          }
        }
      }
    }
    MECC::TraceComment(Translate("=================================== ManuallyMoveChannel - FINISH"));
  }

  function GetChannelPosition( device & ML_STAR, variable & o_flt_XCoord, variable & o_flt_YCoord, variable & o_flt_ZCoord ) void {
    o_flt_XCoord = 0;
    o_flt_YCoord = 0;
    o_flt_ZCoord = 0;
    o_flt_XCoord = 0.0;
    o_flt_YCoord = 0.0;
    o_flt_ZCoord = 0.0;
    STAR_FIRMWARE_CHANNEL_CONTROL::Get_Channel_Position(ML_STAR, 8, o_flt_XCoord, o_flt_YCoord, o_flt_ZCoord);
  }

  function MoveChannelToPosition( device & ML_STAR, variable i_flt_TraverseHeight, variable i_flt_XCoord, variable i_flt_YCoord, variable i_flt_ZCoord ) void {
    private variable i;
    private variable str_ChPattern;
    private variable arr_ZPosition[];
    private variable arr_YPosition[];
    private variable arr_ChannelPattern[];
    MECC::TraceComment(Translate("=================================== MoveChannelToPosition - START"));
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    arr_ChannelPattern.SetSize(0);
    arr_YPosition.SetSize(0);
    arr_ZPosition.SetSize(0);
    str_ChPattern = Translate("");
    {
      for(i = 0; i < 8;)
      {
        i = i + 1;
        arr_ChannelPattern.AddAsLast(0);
        arr_YPosition.AddAsLast(0.0);
        arr_ZPosition.AddAsLast(0.0);
      }
    }
    arr_ChannelPattern.SetAt(8-1, 1);
    arr_YPosition.SetAt(8-1, i_flt_YCoord);
    arr_ZPosition.SetAt(8-1, i_flt_ZCoord);
    {
      for(i = 0; i < 8;)
      {
        i = i + 1;
        str_ChPattern = StrConcat2(str_ChPattern, arr_ChannelPattern.ElementAt( i -1));
      }
    }
    MECC::TraceComment(Translate(""));
    Trace("Traverse height:  ",i_flt_TraverseHeight," mm");
    Trace("X Coord:  ",i_flt_XCoord," mm");
    Trace("Y Coord:  ",i_flt_YCoord," mm");
    Trace("Z Coord:  ",i_flt_ZCoord," mm");
    MECC::TraceComment(Translate(""));
    if(0){
      STAR_FIRMWARE_CHANNEL_CONTROL::_MoveZAbsolute(ML_STAR, 8, i_flt_TraverseHeight);
      STAR_FIRMWARE_CHANNEL_CONTROL::_MoveYAbsolute(ML_STAR, 8, i_flt_YCoord);
      STAR_FIRMWARE_CHANNEL_CONTROL::_MoveXAbsolute(ML_STAR, i_flt_XCoord);
      STAR_FIRMWARE_CHANNEL_CONTROL::_MoveZAbsolute(ML_STAR, 8, i_flt_ZCoord);
    }
    STAR_FIRMWARE_CHANNEL_CONTROL::Move_Channels_To_Absolute_Position(ML_STAR, str_ChPattern, i_flt_TraverseHeight, i_flt_XCoord, arr_YPosition, arr_ZPosition);
    MECC::TraceComment(Translate("=================================== MoveChannelToPosition - FINISH"));
  }

  function MoveChannelToXCoord( device & ML_STAR, variable i_flt_XCoord ) void {
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    STAR_FIRMWARE_CHANNEL_CONTROL::_MoveXAbsolute(ML_STAR, i_flt_XCoord);
  }

  function MoveChannelToYCoord( device & ML_STAR, variable i_flt_YCoord ) void {
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    STAR_FIRMWARE_CHANNEL_CONTROL::_MoveYAbsolute(ML_STAR, 8, i_flt_YCoord);
  }

  function MoveChannelToZCoord( device & ML_STAR, variable i_flt_ZCoord ) void {
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    STAR_FIRMWARE_CHANNEL_CONTROL::_MoveZAbsolute(ML_STAR, 8, i_flt_ZCoord);
  }

  function FindWellCenter( device & ML_STAR, variable i_flt_MinSearchZ, variable i_flt_SafeHeight, variable i_flt_WellWidth, variable & o_flt_XCenter, variable & o_flt_YCenter, variable & o_flt_ContainerZMax, variable & o_flt_XWidth, variable & o_flt_YWidth ) void {
    o_flt_XCenter = 0;
    o_flt_YCenter = 0;
    o_flt_ContainerZMax = 0;
    o_flt_XWidth = 0;
    o_flt_YWidth = 0;
    MECC::TraceComment(Translate("=================================== FindWellCenter - START"));
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    Trace("Min search Z:  ",i_flt_MinSearchZ);
    Trace("Safe Z height:  ",i_flt_SafeHeight);
    Trace("Well width:  ",i_flt_WellWidth);
    STAR_FIRMWARE_CHANNEL_CONTROL::Find_Well_Center_3(ML_STAR, 8, i_flt_MinSearchZ, flt_TipLength, i_flt_SafeHeight, i_flt_WellWidth, 0.6, 0.3, o_flt_XCenter, o_flt_YCenter, o_flt_ContainerZMax, o_flt_XWidth, o_flt_YWidth);
    MECC::TraceComment(Translate("=================================== FindWellCenter - FINISH"));
  }

  function SearchZHeight( device & ML_STAR, variable i_bool_UseSlowSpeed, variable i_flt_MinZHeight, variable & o_flt_ZHeightFound ) variable {
    private variable ret_WallFound;
    o_flt_ZHeightFound = 0;
    MECC::TraceComment(Translate("=================================== SearchZHeight - START"));
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    ret_WallFound = ASWGLOBAL::BOOL::FALSE;
    o_flt_ZHeightFound = 0.0;
    if (i_bool_UseSlowSpeed == 0)
    {
      ret_WallFound = STAR_FIRMWARE_CHANNEL_CONTROL::Search_Z(ML_STAR, 8, i_flt_MinZHeight, flt_TipLength, 1, o_flt_ZHeightFound);
    }
    else
    {
      ret_WallFound = STAR_FIRMWARE_CHANNEL_CONTROL::Search_Z_Slow(ML_STAR, 8, i_flt_MinZHeight, flt_TipLength, 1, o_flt_ZHeightFound);
    }
    Trace("------------------------------------------------------");
    Trace("");
    Trace("     ","Z Height Found:  ",o_flt_ZHeightFound);
    Trace("     ","Wall Found:  ",ret_WallFound);
    Trace("");
    Trace("------------------------------------------------------");
    MECC::TraceComment(Translate("=================================== SearchZHeight - FINISH"));
    return (ret_WallFound);
  }

  function SearchForCLLD_X( device & ML_STAR, variable i_flt_DistanceToSearch, variable i_int_DirectionToSearch, variable & o_flt_XCoordinateFound ) variable {
    private variable ret_bln_CLLDFound;
    o_flt_XCoordinateFound = 0;
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    ret_bln_CLLDFound = 0;
    ret_bln_CLLDFound = STAR_FIRMWARE_CHANNEL_CONTROL::SearchForCLLD_X(ML_STAR, 8, i_flt_DistanceToSearch, i_int_DirectionToSearch, o_flt_XCoordinateFound);
    return (ret_bln_CLLDFound);
  }

  function SearchForCLLD_Y( device & ML_STAR, variable i_flt_DistanceToSearch, variable i_int_DirectionToSearch, variable & o_flt_YCoordinateFound ) variable {
    private variable ret_bln_CLLDFound;
    o_flt_YCoordinateFound = 0;
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    ret_bln_CLLDFound = 0;
    ret_bln_CLLDFound = STAR_FIRMWARE_CHANNEL_CONTROL::SearchForCLLD_Y(ML_STAR, 8, i_flt_DistanceToSearch, i_int_DirectionToSearch, o_flt_YCoordinateFound);
    return (ret_bln_CLLDFound);
  }

  function CheckIfTipsPresent( device & ML_STAR, variable & o_str_ChannelPatternOfTips ) variable {
    private variable ret_bln_TipsPresent;
    o_str_ChannelPatternOfTips = 0;
    ret_bln_TipsPresent = ASWGLOBAL::BOOL::FALSE;
    o_str_ChannelPatternOfTips = Translate("");
    o_str_ChannelPatternOfTips = StrFillRight(o_str_ChannelPatternOfTips, Translate("0"), 8);
    ret_bln_TipsPresent = TIP_PRESENT_CHECK_5ML_1ML_V2::Check_Tips_Present_1ml(ML_STAR, o_str_ChannelPatternOfTips, 8);
    return (ret_bln_TipsPresent);
  }

  function ManuallyMoveChannel_WithDescription_Config( device & ML_STAR, variable i_str_TeachLabware, variable i_str_TeachPosition, variable i_str_Instruction, variable i_bool_XMovementValid, variable i_bool_YMovementValid, variable i_bool_ZMovementValid ) void {
    private dialog dialogHandle_6;
    private dialog customDialog_7;
    private variable bol_Visible;
    private variable int_DistanceSelection;
    private variable int_MoveValue;
    private variable flt_CurrentX;
    private variable flt_Offset_X;
    private variable NotUsed;
    private variable flt_CurrentY;
    private variable flt_Offset_Y;
    private variable flt_CurrentZ;
    private variable flt_Offset_Z;
    private variable flt_MoveDistance;
    private variable str_X_Start;
    private variable str_Y_Start;
    private variable str_Z_Start;
    private variable str_CurrentX;
    private variable str_CurrentY;
    private variable str_Offset_X;
    private variable retValueDialog;
    private variable str_MoveButtonText;
    private variable str_Offset_Y;
    private variable str_CurrentZ;
    private variable int_ChannelNumber;
    private variable str_Offset_Z;
    private variable flt_X_Start;
    private variable flt_Y_Start;
    private variable flt_Z_Start;
    private variable arr_MoveOptions[];
    private variable int_CLLD_Status;
    private dialog customDialog_8;
    MECC::TraceComment(Translate("=================================== ManuallyMoveChannel - START"));
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    int_ChannelNumber = 8;
    DevGetLabwarePositionEx(ML_STAR, i_str_TeachLabware, i_str_TeachPosition, flt_X_Start, flt_Y_Start, flt_Z_Start, NotUsed);
    int_MoveValue = 0;
    bol_Visible = 0;
    str_MoveButtonText = Translate("Select Movement");
    int_DistanceSelection = 2;
    arr_MoveOptions.SetSize(0);
    arr_MoveOptions.AddAsLast(5.0);
    arr_MoveOptions.AddAsLast(1.0);
    arr_MoveOptions.AddAsLast(0.1);
    str_X_Start = StrFStrEx(flt_X_Start, 1, 5);
    str_Y_Start = StrFStrEx(flt_Y_Start, 1, 4);
    str_Z_Start = StrFStrEx(flt_Z_Start, 1, 4);
    flt_Offset_X = 0.0;
    flt_Offset_Y = 0.0;
    flt_Offset_Z = 0.0;
    TurnCLLDOnOff(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    {
      while (1 == 1)
      {
        GetCLLDStatus(ML_STAR, int_CLLD_Status);
        STAR_FIRMWARE_CHANNEL_CONTROL::Get_Channel_Position(ML_STAR, int_ChannelNumber, flt_CurrentX, flt_CurrentY, flt_CurrentZ);
        flt_Offset_X = flt_CurrentX - flt_X_Start;
        flt_Offset_Y = flt_CurrentY - flt_Y_Start;
        flt_Offset_Z = flt_CurrentZ - flt_Z_Start;
        flt_Offset_X = MthRound(flt_Offset_X, 1);
        flt_Offset_Y = MthRound(flt_Offset_Y, 1);
        flt_Offset_Z = MthRound(flt_Offset_Z, 1);
        str_Offset_X = StrFStrEx(flt_Offset_X, 1, 5);
        str_Offset_Y = StrFStrEx(flt_Offset_Y, 1, 4);
        str_Offset_Z = StrFStrEx(flt_Offset_Z, 1, 4);
        str_CurrentX = StrFStrEx(flt_CurrentX, 1, 5);
        str_CurrentY = StrFStrEx(flt_CurrentY, 1, 4);
        str_CurrentZ = StrFStrEx(flt_CurrentZ, 1, 4);
        Trace("");
        Trace("     ","CLLD Status:  ",int_CLLD_Status);
        Trace("");
        if(0){
          customDialog_7.InitCustomDialog("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");
          customDialog_7.SetCustomDialogProperty( "textBlock1.Text", i_str_Instruction );
          customDialog_7.SetCustomDialogProperty( "textBlock5.Text", str_CurrentX );
          customDialog_7.SetCustomDialogProperty( "textBlock6.Text", str_CurrentY );
          customDialog_7.SetCustomDialogProperty( "textBlock7.Text", str_CurrentZ );
          customDialog_7.SetCustomDialogProperty( "textBlock11.Text", str_Offset_X );
          customDialog_7.SetCustomDialogProperty( "textBlock12.Text", str_Offset_Y );
          customDialog_7.SetCustomDialogProperty( "textBlock13.Text", str_Offset_Z );
          customDialog_7.SetCustomDialogProperty( "comboBox1.SelectedIndex", int_DistanceSelection );
          customDialog_7.SetCustomDialogProperty( "Back.IsEnabled", i_bool_YMovementValid );
          customDialog_7.SetCustomDialogProperty( "Forward.IsEnabled", i_bool_YMovementValid );
          customDialog_7.SetCustomDialogProperty( "Right.IsEnabled", i_bool_XMovementValid );
          customDialog_7.SetCustomDialogProperty( "Left.IsEnabled", i_bool_XMovementValid );
          customDialog_7.SetCustomDialogProperty( "Up.IsEnabled", i_bool_ZMovementValid );
          customDialog_7.SetCustomDialogProperty( "Down.IsEnabled", i_bool_ZMovementValid );
          customDialog_7.SetCustomDialogProperty( "MoveButton.Content", str_MoveButtonText );
          customDialog_7.SetCustomDialogProperty( "A.IsVisible", bol_Visible );
          customDialog_7.SetCustomDialogProperty( "A.Value", int_MoveValue );
          customDialog_7.ShowCustomDialog();
          retValueDialog = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
          int_DistanceSelection = customDialog_7.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
          str_MoveButtonText = customDialog_7.GetCustomDialogProperty( "MoveButton.Content" );
          int_MoveValue = customDialog_7.GetCustomDialogProperty( "A.Value" );
        }
        customDialog_8.InitCustomDialog("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");
        customDialog_8.SetCustomDialogProperty( "textBlock1.Text", i_str_Instruction );
        customDialog_8.SetCustomDialogProperty( "textBlock5.Text", str_CurrentX );
        customDialog_8.SetCustomDialogProperty( "textBlock6.Text", str_CurrentY );
        customDialog_8.SetCustomDialogProperty( "textBlock7.Text", str_CurrentZ );
        customDialog_8.SetCustomDialogProperty( "textBlock11.Text", str_Offset_X );
        customDialog_8.SetCustomDialogProperty( "textBlock12.Text", str_Offset_Y );
        customDialog_8.SetCustomDialogProperty( "textBlock13.Text", str_Offset_Z );
        customDialog_8.SetCustomDialogProperty( "comboBox1.SelectedIndex", int_DistanceSelection );
        customDialog_8.SetCustomDialogProperty( "Back.IsEnabled", i_bool_YMovementValid );
        customDialog_8.SetCustomDialogProperty( "Forward.IsEnabled", i_bool_YMovementValid );
        customDialog_8.SetCustomDialogProperty( "Right.IsEnabled", i_bool_XMovementValid );
        customDialog_8.SetCustomDialogProperty( "Left.IsEnabled", i_bool_XMovementValid );
        customDialog_8.SetCustomDialogProperty( "Up.IsEnabled", i_bool_ZMovementValid );
        customDialog_8.SetCustomDialogProperty( "Down.IsEnabled", i_bool_ZMovementValid );
        customDialog_8.SetCustomDialogProperty( "MoveButton.Content", str_MoveButtonText );
        customDialog_8.SetCustomDialogProperty( "A.IsVisible", bol_Visible );
        customDialog_8.SetCustomDialogProperty( "A.Value", int_MoveValue );
        customDialog_8.ShowCustomDialog();
        retValueDialog = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
        int_DistanceSelection = customDialog_8.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
        str_MoveButtonText = customDialog_8.GetCustomDialogProperty( "MoveButton.Content" );
        int_MoveValue = customDialog_8.GetCustomDialogProperty( "A.Value" );
        if (retValueDialog == 7)
        {
          MECC::TraceComment(Translate("MOVEMENT COMPETED"));
          break;
        }
        if (int_MoveValue == 0)
        {
          dialogHandle_6.SetOutput(Translate("Please choose a movement direction!"));
          dialogHandle_6.ShowOutput(Translate("Choose Direction!"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        if (retValueDialog == 1)
        {
          flt_MoveDistance=arr_MoveOptions.GetAt(int_DistanceSelection-1);
          if (int_MoveValue == 1)
          {
            Trace("----- MOVE X : -",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_X_Relative(ML_STAR, 1, flt_MoveDistance);
          }
          if (int_MoveValue == 2)
          {
            Trace("----- MOVE X : ",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_X_Relative(ML_STAR, 0, flt_MoveDistance);
          }
          if (int_MoveValue == 3)
          {
            Trace("----- MOVE Y : -",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_Y_Relative(ML_STAR, int_ChannelNumber, 1, flt_MoveDistance);
          }
          if (int_MoveValue == 4)
          {
            Trace("----- MOVE Y : ",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_Y_Relative(ML_STAR, int_ChannelNumber, 0, flt_MoveDistance);
          }
          if (int_MoveValue == 5)
          {
            Trace("----- MOVE Z : -",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_Z_Relative(ML_STAR, int_ChannelNumber, 1, flt_MoveDistance);
          }
          if (int_MoveValue == 6)
          {
            Trace("----- MOVE Z : ",flt_MoveDistance," mm");
            STAR_FIRMWARE_CHANNEL_CONTROL::Move_Z_Relative(ML_STAR, int_ChannelNumber, 0, flt_MoveDistance);
          }
        }
      }
    }
    TurnCLLDOnOff(ML_STAR, ASWGLOBAL::BOOL::FALSE);
    MECC::TraceComment(Translate("=================================== ManuallyMoveChannel - FINISH"));
  }

  function TurnCLLDOnOff( device & ML_STAR, variable i_bln_TurnOn ) void {
    MECC::TraceComment(Translate("=================================== TurnCLLDOnOff - START"));
    STAR_FIRMWARE_CHANNEL_CONTROL::SwitchLLDMeasurement(ML_STAR, i_bln_TurnOn);
    MECC::TraceComment(Translate("=================================== TurnCLLDOnOff - FINISH"));
  }

  function GetCLLDStatus( device & ML_STAR, variable & o_int_CLLDStatus ) void {
    o_int_CLLDStatus = 0;
    MECC::TraceComment(Translate("=================================== GetCLLDStatus - START"));
    o_int_CLLDStatus = -1;
    STAR_FIRMWARE_CHANNEL_CONTROL::GetCLLDStatus(ML_STAR, 8, o_int_CLLDStatus);
    MECC::TraceComment(Translate("=================================== GetCLLDStatus - FINISH"));
  }

  function SearchForCLLD_Z( device & ML_STAR, variable i_flt_ZMin, variable i_flt_LLDSearchHeight, variable i_flt_ImmersionDepth, variable i_int_ImmersionDirection, variable & o_flt_ZCoordinateFound ) void {
    o_flt_ZCoordinateFound = 0;
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    o_flt_ZCoordinateFound = 0.0;
    Trace("LLD search height:  ",i_flt_LLDSearchHeight,"  Minimum Z Height:  ",i_flt_ZMin);
    STAR_FIRMWARE_CHANNEL_CONTROL::SearchForCLLD_Z(ML_STAR, 8, flt_TipLength, i_flt_ZMin, i_flt_LLDSearchHeight, i_flt_ImmersionDepth, i_int_ImmersionDirection, 3, o_flt_ZCoordinateFound);
    Trace("Z coordinate found:  ",o_flt_ZCoordinateFound);
  }

  function GetXArmRange( device & ML_STAR, variable & o_flt_LeftXMin, variable & o_flt_LeftXMax, variable & o_flt_RightXMin, variable & o_flt_RightXMax ) void {
    o_flt_LeftXMin = 0;
    o_flt_LeftXMax = 0;
    o_flt_RightXMin = 0;
    o_flt_RightXMax = 0;
    MECC::TraceComment(Translate("=================================== GetXArmRange - START"));
    STAR_FIRMWARE_CHANNEL_CONTROL::Request_X_Ranges(ML_STAR, o_flt_LeftXMin, o_flt_LeftXMax, o_flt_RightXMin, o_flt_RightXMax);
    MECC::TraceComment(Translate("=================================== GetXArmRange - FINISH"));
  }

  function MoveRightArmToXCoord( device & ML_STAR, variable i_flt_XCoord ) void {
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    STAR_FIRMWARE_CHANNEL_CONTROL::_MoveRightArmXAbsolute(ML_STAR, i_flt_XCoord);
  }

  function CreateMaximumYForWorkingChannel( device & ML_STAR ) void {
    MECC::TraceComment(Translate("=================================== CreateMaximumYForWorkingChannel - START"));
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    STAR_FIRMWARE_CHANNEL_CONTROL::Create_Maximum_Y_for_Channel(ML_STAR, 8);
    MECC::TraceComment(Translate("=================================== CreateMaximumYForWorkingChannel - FINISH"));
  }

  function GetStopDiskZCoord( device & ML_STAR, variable & o_flt_ZCoord ) void {
    o_flt_ZCoord = 0;
    STAR_FIRMWARE_CHANNEL_CONTROL::GetStopDiskZCoord(ML_STAR, 8, o_flt_ZCoord);
  }

  function MoveMPH96ToBack( device & ML_STAR ) void {
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    STAR_FIRMWARE_CHANNEL_CONTROL::MoveMPH96ToBack(ML_STAR);
  }

  function LockDoors( device & ML_STAR, variable i_bln_LockDoor ) void {
    MECC::TraceComment(Translate("=================================== LockDoors - START"));
    if (i_bln_LockDoor == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    else
    {
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    MECC::TraceComment(Translate("=================================== LockDoors - FINISH"));
  }

  function CheckPlateWithTwoChannels( device & ML_STAR, variable i_str_LabwareToCheck, variable & o_flt_PlateHeight ) variable {
    private variable flt_SearchSpeed;
    private variable flt_TraverseHeight;
    private variable int_BackChannel;
    private variable int_FrontChannel;
    private variable flt_LabwareClearanceHeight_Z;
    private variable flt_Angle;
    private variable flt_SearchDistance;
    private variable flt_NotUsed;
    private variable flt_LabwareRackHeight_Z;
    private variable flt_LabwareRackBottom_Z;
    private variable flt_LabwareCenter_X;
    private variable flt_LabwareCenter_Y;
    private variable flt_MinimumSearchHeight;
    private sequence seq_Temp;
    private variable flt_Width_X;
    private variable flt_Length_Y;
    private variable flt_SearchWidthOffset;
    private variable flt_ChannelDistanceForSearch;
    private variable bln_LabwareFound;
    private variable ret_PlateFound;
    private variable bln_LabwareValid;
    private variable flt_CurrentYSecondary;
    private variable flt_CurrentZSecondary;
    private variable flt_CurrentZWorking;
    private variable flt_CurrentXWorking;
    private variable flt_CurrentXSecondary;
    private variable int_ChIndex;
    private variable str_ChPattern;
    private variable flt_CurrentYWorking;
    private variable arr_ZPosition[];
    private variable arr_YPosition[];
    private variable arr_ChPattern[];
    private variable str_ReturnValue;
    private variable str_FWParameter;
    private variable flt_ZSpeed;
    private variable str_FWCommand;
    private variable flt_ZIncremenToMM;
    private variable str_ZSpeed;
    private variable str_ZV;
    private variable int_ZSpeed;
    o_flt_PlateHeight = 0;
    MECC::TraceComment(Translate("=================================== CheckPlateWithTwoChannels - START"));
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    o_flt_PlateHeight = 0.0;
    ret_PlateFound = ASWGLOBAL::BOOL::FALSE;
    flt_SearchSpeed = 45.0;
    flt_TraverseHeight = 245.0;
    flt_SearchWidthOffset = 15.0;
    int_FrontChannel = 8;
    int_BackChannel = 7;
    bln_LabwareValid = DevIsValidLabwareForCurrentDeckLayout(ML_STAR, i_str_LabwareToCheck);
    if (bln_LabwareValid == 0)
    {
      Trace("Labware:  ",i_str_LabwareToCheck," is not valid for current deck!");
      MECC::TraceComment(Translate("=================================== CheckPlateWithTwoChannels - FINISH"));
      return (ret_PlateFound);
    }
    LPQ::SEQ_GetDefaultSequence(ML_STAR, i_str_LabwareToCheck, 1, seq_Temp);
    LPQ::LABWARE_GetLabwareCenter(ML_STAR, seq_Temp, flt_LabwareCenter_X, flt_LabwareCenter_Y);
    LPQ::LABWARE_GetRackHeight(ML_STAR, seq_Temp, 1, flt_LabwareRackHeight_Z, flt_LabwareClearanceHeight_Z);
    LPQ::LABWARE_GetLabwareOrigin(ML_STAR, seq_Temp, flt_NotUsed, flt_NotUsed, flt_LabwareRackBottom_Z);
    LPQ::LABWARE_GetLabwareLW(ML_STAR, seq_Temp, flt_Length_Y, flt_Width_X);
    flt_SearchDistance = flt_LabwareRackHeight_Z - flt_LabwareRackBottom_Z;
    flt_SearchDistance = flt_SearchDistance / (2 * 1.0);
    flt_MinimumSearchHeight = flt_LabwareRackBottom_Z + flt_SearchDistance;
    flt_MinimumSearchHeight = 125.0;
    DevGetLabwarePosition(ML_STAR, i_str_LabwareToCheck, flt_NotUsed, flt_NotUsed, flt_NotUsed, flt_Angle);
    flt_ChannelDistanceForSearch = flt_Length_Y - flt_SearchWidthOffset;
    if (flt_Angle == 90.0)
    {
      flt_ChannelDistanceForSearch = flt_Width_X - flt_SearchWidthOffset;
    }
    if (flt_Angle == 270.0)
    {
      flt_ChannelDistanceForSearch = flt_Width_X - flt_SearchWidthOffset;
    }
    flt_ZIncremenToMM = 0.01072765;
    MECC::TraceComment(Translate("Change Z speed and sensitivity"));
    flt_ZSpeed = flt_SearchSpeed / (flt_ZIncremenToMM * 1.0);
    int_ZSpeed = MthCeiling(flt_ZSpeed);
    str_ZSpeed = StrConcat2(int_ZSpeed, Translate(""));
    str_ZSpeed = StrFillLeft(str_ZSpeed, Translate("0"), 5);
    str_ZV = StrConcat4(Translate("zv"), str_ZSpeed, Translate(""), Translate(""));
    str_FWCommand = Translate("PXAA");
    str_FWParameter = StrConcat8(Translate("zr005zw1"), str_ZV, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Trace("FW Command:  ",str_FWCommand," : ",str_FWParameter);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    bln_LabwareFound = STAR_FIRMWARE_CHANNEL_CONTROL::CheckPlateWithTwoChannels(ML_STAR, flt_LabwareCenter_X, flt_LabwareCenter_Y, flt_MinimumSearchHeight, flt_SearchSpeed, flt_ChannelDistanceForSearch, flt_TraverseHeight, flt_MinimumSearchHeight, int_BackChannel, int_FrontChannel);
    MECC::TraceComment(Translate("Reset the speed back to normal"));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    STAR_FIRMWARE_CHANNEL_CONTROL::Get_Channel_Position(ML_STAR, int_BackChannel, flt_CurrentXWorking, flt_CurrentYWorking, flt_CurrentZWorking);
    STAR_FIRMWARE_CHANNEL_CONTROL::Get_Channel_Position(ML_STAR, int_FrontChannel, flt_CurrentXSecondary, flt_CurrentYSecondary, flt_CurrentZSecondary);
    str_ChPattern = Translate("");
    arr_ChPattern.SetSize(0);
    arr_YPosition.SetSize(0);
    arr_ZPosition.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < 8;)
      {
        int_ChIndex = int_ChIndex + 1;
        arr_ChPattern.AddAsLast(0);
        arr_YPosition.AddAsLast(0.0);
        arr_ZPosition.AddAsLast(flt_TraverseHeight);
      }
    }
    arr_ChPattern.SetAt(int_BackChannel-1, 1);
    arr_ChPattern.SetAt(int_FrontChannel-1, 1);
    arr_YPosition.SetAt(int_BackChannel-1, flt_CurrentYWorking);
    arr_YPosition.SetAt(int_FrontChannel-1, flt_CurrentYSecondary);
    {
      for(int_ChIndex = 0; int_ChIndex < 8;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChPattern = StrConcat2(str_ChPattern, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    STAR_FIRMWARE_CHANNEL_CONTROL::Move_Channels_To_Absolute_Position(ML_STAR, str_ChPattern, flt_TraverseHeight, flt_CurrentXWorking, arr_YPosition, arr_ZPosition);
    if (bln_LabwareFound == 1)
    {
      ret_PlateFound = ASWGLOBAL::BOOL::TRUE;
      if(0){
        o_flt_PlateHeight = flt_CurrentZWorking + flt_CurrentZSecondary;
        o_flt_PlateHeight = o_flt_PlateHeight / (2 * 1.0);
      }
      if (flt_CurrentZWorking > flt_CurrentZSecondary)
      {
        o_flt_PlateHeight = flt_CurrentZWorking;
      }
      else
      {
        o_flt_PlateHeight = flt_CurrentZSecondary;
      }
    }
    o_flt_PlateHeight = MthRound(o_flt_PlateHeight, 1);
    MECC::TraceComment(Translate("=================================== CheckPlateWithTwoChannels - FINISH"));
    return (ret_PlateFound);
  }

  function GetTeachingTips( device & ML_STAR, variable i_str_ChannelPattern, sequence i_seq_TipPosition ) void {
    private variable flt_NotUsed;
    private variable flt_ChannelPosition_X;
    private variable flt_ChannelPosition_Y;
    private variable flt_ChannelPosition_Z;
    private variable flt_TapPosition_X;
    private variable flt_TapPosition_Y;
    private variable flt_PreTapHeight;
    private variable flt_ZBottomHeight;
    private variable str_Status;
    private variable flt_ZNeedleHeight;
    private variable str_LabwareFirst;
    private variable str_PositionFirst;
    private variable int_ChannelIndex;
    private variable arr_TapPositionY[];
    private variable arr_TapPositionZ[];
    MECC::TraceComment(Translate("=================================== _GetTeachingTip - START"));
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    CreateMaximumYForWorkingChannel(ML_STAR);
    str_LabwareFirst = SeqGetLabwareId(i_seq_TipPosition);
    str_PositionFirst = SeqGetPositionId(i_seq_TipPosition);
    DevGetLabwarePositionEx(ML_STAR, str_LabwareFirst, str_PositionFirst, flt_TapPosition_X, flt_TapPosition_Y, flt_NotUsed, flt_NotUsed);
    flt_TapPosition_X = flt_TapPosition_X + 12.0;
    arr_TapPositionY.SetSize(0);
    arr_TapPositionZ.SetSize(0);
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < 8;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        arr_TapPositionY.AddAsLast(0.0);
        arr_TapPositionZ.AddAsLast(0.0);
      }
    }
    arr_TapPositionY.SetAt(8-1, flt_TapPosition_Y);
    arr_TapPositionZ.SetAt(8-1, 230.0);
    GetChannelPosition(ML_STAR, flt_ChannelPosition_X, flt_ChannelPosition_Y, flt_ChannelPosition_Z);
    MECC::TraceComment(Translate("MOVE TO TAP LOCATION"));
    if(0){
      MoveChannelToPosition(ML_STAR, flt_ChannelPosition_Z, flt_TapPosition_X, flt_TapPosition_Y, 230.0);
    }
    MoveChannelsToPosition(ML_STAR, Translate("00000001"), flt_ChannelPosition_Z, flt_TapPosition_X, arr_TapPositionY, arr_TapPositionZ);
    MECC::TraceComment(Translate("FIND HEIGHT WITH NO TIP"));
    SearchZHeight(ML_STAR, ASWGLOBAL::BOOL::FALSE, 100.0, flt_ZBottomHeight);
    MECC::TraceComment(Translate("MOVE BACK TO SAFE HEIGHT"));
    if(0){
      MoveChannelToPosition(ML_STAR, flt_ChannelPosition_Z, flt_TapPosition_X, flt_TapPosition_Y, flt_ChannelPosition_Z);
    }
    MoveChannelToZCoord(ML_STAR, flt_ChannelPosition_Z);
    Util2::Debug::TraceSequence(i_seq_TipPosition);
    MECC::TraceComment(Translate("PICK UP TIP"));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    flt_PreTapHeight = flt_ZBottomHeight + 5.0;
    arr_TapPositionY.SetSize(0);
    arr_TapPositionZ.SetSize(0);
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < 8;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        arr_TapPositionY.AddAsLast(0.0);
        arr_TapPositionZ.AddAsLast(0.0);
      }
    }
    arr_TapPositionY.SetAt(8-1, flt_TapPosition_Y);
    arr_TapPositionZ.SetAt(8-1, flt_PreTapHeight);
    MECC::TraceComment(Translate("MOVE TO TAP LOCATION"));
    if(0){
      MoveChannelToPosition(ML_STAR, 245.0, flt_TapPosition_X, flt_TapPosition_Y, flt_PreTapHeight);
    }
    MoveChannelsToPosition(ML_STAR, Translate("00000001"), 245.0, flt_TapPosition_X, arr_TapPositionY, arr_TapPositionZ);
    MECC::TraceComment(Translate("FIND HEIGHT WITH TIP"));
    SearchZHeight(ML_STAR, ASWGLOBAL::BOOL::FALSE, 100.0, flt_ZNeedleHeight);
    MECC::TraceComment(Translate("MOVE TO SAFE HEIGHT"));
    MoveChannelToZCoord(ML_STAR, 245.0);
    flt_TipLength = flt_ZNeedleHeight - flt_ZBottomHeight;
    str_Status = StrConcat2(Translate("Tip length:  "), Translate(""));
    Trace("Current Tip Length:  ",flt_TipLength);
    MECC::TraceComment(Translate("=================================== _GetTeachingTip - FINISH"));
  }

  function MoveChannelsToPosition( device & ML_STAR, variable i_str_ChannelPattern, variable i_flt_TraverseHeight, variable i_flt_XCoord, variable & i_arr_YCoords[], variable & i_arr_ZCoords[] ) void {
    MECC::TraceComment(Translate("=================================== MoveChannelsToPosition - START"));
    LockDoors(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    MECC::TraceComment(Translate(""));
    MECC::TraceComment(Translate(""));
    STAR_FIRMWARE_CHANNEL_CONTROL::Move_Channels_To_Absolute_Position(ML_STAR, i_str_ChannelPattern, i_flt_TraverseHeight, i_flt_XCoord, i_arr_YCoords, i_arr_ZCoords);
    MECC::TraceComment(Translate("=================================== MoveChannelsToPosition - FINISH"));
  }
} // library namespace
