#pragma once
#include "HSLExtensions\\File.hsl"
#include "HSLStrLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLDevLib.hsl"
#include "Teaching\\Resources\\Library\\Teaching_Support.hs_"
#include "HSLSeqLib.hsl"
#include "HSLTipCountingLib.hsl"
#include "Teaching\\Resources\\Library\\Teaching_Global.hsl"
#include "Teaching\\Resources\\Library\\Movement_Controller.hs_"
#include "Teaching\\Resources\\Library\\HSL_LabEdit_CTR_FileValues.hsl"
#include "Teaching\\Resources\\Library\\HSL_LabEdit_LID_FileValues.hsl"
#include "Teaching\\Resources\\Library\\HSL_LabEdit_RCK_FileValues.hsl"
#include "Teaching\\Resources\\Library\\HSL_LabEdit_TML_FileValues.hsl"
#include "HSLExtensions\\Array.hsl"
#include "HSLDeckVisualize.hsl"
#include "Teaching\\Resources\\Library\\LabwareEdit_RCK.hs_"
#include "Labware Properties\\Labware_Property_Query.hs_"
#include "HSLExtensions\\Directory.hsl"
#include "HSLTimLib.hsl"
#include "Edit File Attributes\\EditFileAttributes.hs_"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLStatistics.hsl"
#include "Teaching\\Resources\\Library\\Status_Update_Controller.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace POSITION_TEACHING_CONTROLLER {
  function Abstract(  ) void ;
  function ConfirmCurrentLabware( device & ML_STAR ) variable ;
  function GetAllLabware( device & ML_STAR, variable & o_arr_Carriers[], variable & o_arr_Tips[], variable & o_arr_Plates[], variable & o_arr_DeckLabIDs[], variable & o_arr_GroupedPlates[] ) void ;
  function GetLabwareInformation( variable i_str_LabwareID ) void ;
  function GetTeachingNeedle( device & ML_STAR, variable & i_arr_UniqueTips[], variable i_str_EndButtonText ) variable ;
  function MeasureLabwarePosition( device & ML_STAR, variable & o_flt_DeltaX, variable & o_flt_DeltaY, variable & o_flt_DeltaZ ) void ;
  function ResetLabwareVisState( device & ML_STAR ) void ;
  function SaveTheDeck( device & ML_STAR ) void ;
  function SelectLabwareToTeach( device & ML_STAR, variable & i_arr_LabwareTaught[], variable & o_arr_LabwareToTeach[] ) variable ;
  function SetVisStateOfLabwareAndTemplate( device & ML_STAR, variable i_str_LabwareID, variable i_int_VisState ) void ;
  function UpdateLogFile( device & ML_STAR, variable i_flt_DeltaX, variable i_flt_DeltaY, variable i_flt_DeltaZ, variable & o_str_LogFilePath ) void ;
  function _InitLibrary() {
    TEACHING_SUPPORT::_InitLibrary();
    MOVEMENT_CONTROLLER::_InitLibrary();
    LABWAREEDIT_RCK::_InitLibrary();
    LPQ::_InitLibrary();
    EDITFILEATTRIBUTES::_InitLibrary();
    STATUS_UPDATE_CONTROLLER::_InitLibrary();
  }
  function _ExitLibrary() {
    TEACHING_SUPPORT::_ExitLibrary();
    MOVEMENT_CONTROLLER::_ExitLibrary();
    LABWAREEDIT_RCK::_ExitLibrary();
    LPQ::_ExitLibrary();
    EDITFILEATTRIBUTES::_ExitLibrary();
    STATUS_UPDATE_CONTROLLER::_ExitLibrary();
  }

  function GetTeachingNeedle( device & ML_STAR, variable & i_arr_UniqueTips[], variable i_str_EndButtonText ) variable {
    private variable flt_X_Coord;
    private variable str_DeckLayoutName;
    private variable flt_Y_Coord;
    private variable bool_Selected1000uLTips;
    private variable bool_Selected50uLTips;
    private variable bool_Selected300uLSlimTips;
    private variable str_SelectedTipType;
    private variable str_SQL_Filter;
    private variable bool_SelectedTeachingNeedles;
    private variable bool_Selected300uLTips;
    private variable a;
    private variable bool_Selected10uLTips;
    private variable str_CurrentCoord;
    private variable str_TipLabID;
    private variable str_PreviousCoord;
    private variable int_TotalPositions;
    private variable str_TipCounter;
    private sequence seq_TipPickUp;
    private file QueryFiles;
    private variable arr_TipLabware[];
    private dialog customDialog_1;
    private variable bool_TeachingNeedles;
    private variable bool_300uLSlimTips;
    private variable bool_50uLTips;
    private variable bool_300uLTips;
    private variable retValueDialog;
    private variable bool_1000uLTips;
    private variable str_TeachingTipImageName;
    private variable bool_10uLTips;
    private variable str_TipPosID;
    private variable i;
    private variable int_TotalTipTypes;
    private variable str_TipType;
    private variable arr_UniqueTips[];
    private variable str_ChannelPattern;
    private variable int_ChIndex;
    private variable arr_ChannelPattern[];
    MECC::TraceComment(Translate("=================================== GetTeachingNeedle - START"));
    retValueDialog = -1;
    str_TeachingTipImageName = Translate("Teaching_Needle");
    str_SelectedTipType = Translate("Teaching Needles");
    str_ChannelPattern = Translate("");
    arr_ChannelPattern.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < STAR_TEACHING::INT::TOTAL_CHANNELS;)
      {
        int_ChIndex = int_ChIndex + 1;
        arr_ChannelPattern.AddAsLast(0);
      }
    }
    arr_ChannelPattern.SetAt(STAR_TEACHING::INT::WORKING_CHANNEL-1, 1);
    arr_ChannelPattern.SetAt(STAR_TEACHING::INT::SECONDARY_CHANNEL-1, 1);
    {
      for(int_ChIndex = 0; int_ChIndex < STAR_TEACHING::INT::TOTAL_CHANNELS;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChannelPattern = StrConcat2(str_ChannelPattern, arr_ChannelPattern.ElementAt( int_ChIndex -1));
      }
    }
    Trace("Channel Pattern:  ",str_ChannelPattern);
    arr_UniqueTips=i_arr_UniqueTips;
    int_TotalTipTypes=arr_UniqueTips.GetSize();
    bool_TeachingNeedles = STAR_TEACHING::BOOL::FALSE;
    bool_1000uLTips = STAR_TEACHING::BOOL::FALSE;
    bool_300uLTips = STAR_TEACHING::BOOL::FALSE;
    bool_300uLSlimTips = STAR_TEACHING::BOOL::FALSE;
    bool_50uLTips = STAR_TEACHING::BOOL::FALSE;
    bool_10uLTips = STAR_TEACHING::BOOL::FALSE;
    bool_SelectedTeachingNeedles = STAR_TEACHING::BOOL::TRUE;
    bool_Selected1000uLTips = STAR_TEACHING::BOOL::FALSE;
    bool_Selected300uLTips = STAR_TEACHING::BOOL::FALSE;
    bool_Selected300uLSlimTips = STAR_TEACHING::BOOL::FALSE;
    bool_Selected50uLTips = STAR_TEACHING::BOOL::FALSE;
    bool_Selected10uLTips = STAR_TEACHING::BOOL::FALSE;
    {
      for(i = 0; i < int_TotalTipTypes;)
      {
        i = i + 1;
        str_TipType=arr_UniqueTips.GetAt(i-1);
        if (str_TipType == "Teaching Needles")
        {
          bool_TeachingNeedles = STAR_TEACHING::BOOL::TRUE;
        }
        if (str_TipType == "1000uL Tips")
        {
          bool_1000uLTips = STAR_TEACHING::BOOL::TRUE;
        }
        if (str_TipType == "300uL Slim Tips")
        {
          bool_300uLSlimTips = STAR_TEACHING::BOOL::TRUE;
        }
        if (str_TipType == "300uL Tips")
        {
          bool_300uLTips = STAR_TEACHING::BOOL::TRUE;
        }
        if (str_TipType == "50uL Tips")
        {
          bool_50uLTips = STAR_TEACHING::BOOL::TRUE;
        }
        if (str_TipType == "10uL Tips")
        {
          bool_10uLTips = STAR_TEACHING::BOOL::TRUE;
        }
      }
    }
    MOVEMENT_CONTROLLER::LockDoors(ML_STAR, STAR_TEACHING::BOOL::FALSE);
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "TipImage.Source", str_TeachingTipImageName );
    customDialog_1.SetCustomDialogProperty( "radioButton1.IsEnabled", bool_TeachingNeedles );
    customDialog_1.SetCustomDialogProperty( "radioButton1.IsChecked", bool_SelectedTeachingNeedles );
    customDialog_1.SetCustomDialogProperty( "Tip_1mL.IsEnabled", bool_1000uLTips );
    customDialog_1.SetCustomDialogProperty( "Tip_1mL.IsChecked", bool_Selected1000uLTips );
    customDialog_1.SetCustomDialogProperty( "Tip_300Slim.IsChecked", bool_Selected300uLSlimTips );
    customDialog_1.SetCustomDialogProperty( "Tip_300Slim.IsEnabled", bool_300uLSlimTips );
    customDialog_1.SetCustomDialogProperty( "Tip_300.IsEnabled", bool_300uLTips );
    customDialog_1.SetCustomDialogProperty( "Tip_300.IsChecked", bool_Selected300uLTips );
    customDialog_1.SetCustomDialogProperty( "Tip_50.IsChecked", bool_Selected50uLTips );
    customDialog_1.SetCustomDialogProperty( "Tip_50.IsEnabled", bool_50uLTips );
    customDialog_1.SetCustomDialogProperty( "Tip_10.IsEnabled", bool_10uLTips );
    customDialog_1.SetCustomDialogProperty( "Tip_10.IsChecked", bool_Selected10uLTips );
    customDialog_1.SetCustomDialogProperty( "button2.Content", i_str_EndButtonText );
    customDialog_1.ShowCustomDialog();
    retValueDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    str_TeachingTipImageName = customDialog_1.GetCustomDialogProperty( "TipImage.Source" );
    bool_SelectedTeachingNeedles = customDialog_1.GetCustomDialogProperty( "radioButton1.IsChecked" );
    bool_Selected1000uLTips = customDialog_1.GetCustomDialogProperty( "Tip_1mL.IsChecked" );
    bool_Selected300uLSlimTips = customDialog_1.GetCustomDialogProperty( "Tip_300Slim.IsChecked" );
    bool_Selected300uLTips = customDialog_1.GetCustomDialogProperty( "Tip_300.IsChecked" );
    bool_Selected50uLTips = customDialog_1.GetCustomDialogProperty( "Tip_50.IsChecked" );
    bool_Selected10uLTips = customDialog_1.GetCustomDialogProperty( "Tip_10.IsChecked" );
    if (retValueDialog == 2)
    {
      MECC::TraceComment(Translate("=================================== GetTeachingNeedle - FINISH"));
      return (retValueDialog);
    }
    Trace("Teaching Needles:  ",bool_SelectedTeachingNeedles);
    Trace("1000uL Tips:  ",bool_Selected1000uLTips);
    Trace("300uL Slims:  ",bool_Selected300uLSlimTips);
    Trace("300uL:  ",bool_Selected300uLTips);
    Trace("50uL:  ",bool_Selected50uLTips);
    {
      for(a = 0; a < 1;)
      {
        a = a + 1;
        if (bool_SelectedTeachingNeedles == STAR_TEACHING::BOOL::TRUE)
        {
          str_SelectedTipType = Translate("Teaching Needles");
          break;
        }
        if (bool_Selected1000uLTips == STAR_TEACHING::BOOL::TRUE)
        {
          str_SelectedTipType = Translate("1000uL Tips");
          break;
        }
        if (bool_Selected300uLSlimTips == STAR_TEACHING::BOOL::TRUE)
        {
          str_SelectedTipType = Translate("300uL Slim Tips");
          break;
        }
        if (bool_Selected300uLTips == STAR_TEACHING::BOOL::TRUE)
        {
          str_SelectedTipType = Translate("300uL Tips");
          break;
        }
        if (bool_Selected50uLTips == STAR_TEACHING::BOOL::TRUE)
        {
          str_SelectedTipType = Translate("50uL Tips");
          break;
        }
        if (bool_Selected10uLTips == STAR_TEACHING::BOOL::TRUE)
        {
          str_SelectedTipType = Translate("10uL Tips");
          break;
        }
      }
    }
    Trace("Selected Tip Labware Type:  ",str_SelectedTipType);
    str_SQL_Filter = StrConcat4(Translate("SELECT [LAB_ID], [X_COORD], [Y_COORD] FROM [TIP_POSITIONS] WHERE [TIP_NAME] = '"), str_SelectedTipType, Translate("'"), Translate("ORDER BY X_COORD ASC, Y_COORD DESC, Z_COORD ASC"));
    QueryFiles.AddField("LAB_ID", str_TipLabID, hslString, 255);
    QueryFiles.AddField("X_COORD", flt_X_Coord, hslFloat);
    QueryFiles.AddField("Y_COORD", flt_Y_Coord, hslFloat);
    if( 0 == QueryFiles.Open(STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH + " " + "TIP_POSITIONS", hslRead, str_SQL_Filter) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH, "HxMetEdCompCmd");
    }
    arr_TipLabware.SetSize(0);
    str_PreviousCoord = Translate("");
    {
      while (
         (QueryFiles.Eof() == 0)
      )
      {
        if( 0 == QueryFiles.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        str_CurrentCoord = StrConcat4(flt_X_Coord, Translate("_"), flt_Y_Coord, Translate(""));
        if (str_CurrentCoord != str_PreviousCoord)
        {
          str_PreviousCoord = str_CurrentCoord;
          arr_TipLabware.AddAsLast(str_TipLabID);
        }
      }
    }
    if( 0 != QueryFiles.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    QueryFiles.RemoveFields();
    Util2::Debug::TraceArray(Translate("Selected Tip Labware"), arr_TipLabware);
    TEACHING_SUPPORT::Get_Default_Sequence_For_LabwareID(ML_STAR, arr_TipLabware, seq_TipPickUp);
    if (bool_SelectedTeachingNeedles == STAR_TEACHING::BOOL::TRUE)
    {
      int_TotalPositions = SeqGetTotal(seq_TipPickUp);
      int_TotalPositions = int_TotalPositions - 1;
      seq_TipPickUp.SetCurrentPosition(int_TotalPositions);
    }
    else
    {
      str_TipCounter = StrConcat4(str_DeckLayoutName, Translate("_"), str_SelectedTipType, Translate(""));
      StrReplace(str_TipCounter, Translate(" "), Translate("_"));
      StrReplace(str_TipCounter, Translate("."), Translate("_"));
      TipCount::Edit2(seq_TipPickUp, str_TipCounter, ML_STAR, 100000);
    }
    if(0){
      str_TipLabID = SeqGetLabwareId(seq_TipPickUp);
      str_TipPosID = SeqGetPositionId(seq_TipPickUp);
      MOVEMENT_CONTROLLER::GetTeachingTip(ML_STAR, str_TipLabID, str_TipPosID);
    }
    MOVEMENT_CONTROLLER::GetTeachingTips(ML_STAR, str_ChannelPattern, seq_TipPickUp);
    MECC::TraceComment(Translate("=================================== GetTeachingNeedle - FINISH"));
    return (retValueDialog);
  }

  function GetAllLabware( device & ML_STAR, variable & o_arr_Carriers[], variable & o_arr_Tips[], variable & o_arr_Plates[], variable & o_arr_DeckLabIDs[], variable & o_arr_GroupedPlates[] ) void {
    private variable str_DeckLayoutName;
    private variable i;
    private variable str_GroupCheck;
    private variable int_PropertyCheck;
    private variable int_TotalPlates;
    private variable int_GroupValue;
    private variable bln_FileExists;
    o_arr_Carriers.SetSize( 0);
    o_arr_Tips.SetSize( 0);
    o_arr_Plates.SetSize( 0);
    o_arr_DeckLabIDs.SetSize( 0);
    o_arr_GroupedPlates.SetSize( 0);
    MECC::TraceComment(Translate("=================================== GetAllLabware - START"));
    bln_FileExists = HSLExtensions::File::Exists(STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH);
    if (bln_FileExists == STAR_TEACHING::BOOL::TRUE)
    {
      HSLExtensions::File::Delete(STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH);
    }
    str_DeckLayoutName = HSLExtensions::File::GetFileNameWithoutExtension(STAR_TEACHING::STR::DECK_LAYOUT_PATH);
    TEACHING_SUPPORT::GetAllCarriers(ML_STAR, o_arr_Carriers);
    Util2::Debug::TraceArray(Translate("Unique carriers"), o_arr_Carriers);
    TEACHING_SUPPORT::GetAllTips(ML_STAR, o_arr_Tips);
    Util2::Debug::TraceArray(Translate("Unique tips"), o_arr_Tips);
    TEACHING_SUPPORT::GetAllRacks(ML_STAR, o_arr_Plates, o_arr_DeckLabIDs);
    Util2::Debug::TraceArray(Translate("Unique plates"), o_arr_Plates);
    Util2::Debug::TraceArray(Translate("Labware IDs"), o_arr_DeckLabIDs);
    o_arr_GroupedPlates.SetSize(0);
    int_TotalPlates=o_arr_DeckLabIDs.GetSize();
    {
      for(i = 0; i < int_TotalPlates;)
      {
        i = i + 1;
        str_GroupCheck = DevGetLabwareData(ML_STAR, o_arr_DeckLabIDs.ElementAt( i -1), STAR_TEACHING::TEACH_POSITION::PROPERTY_KEY_GROUP);
        int_PropertyCheck = StrGetLength(str_GroupCheck);
        if (int_PropertyCheck > 0)
        {
          int_GroupValue = StrIVal(str_GroupCheck);
        }
        else
        {
          int_GroupValue = 0;
        }
        if (int_GroupValue == 1)
        {
          o_arr_GroupedPlates.AddAsLast(o_arr_DeckLabIDs.ElementAt( i -1));
        }
      }
    }
    Util2::Debug::TraceArray(Translate("Group Plates"), o_arr_GroupedPlates);
    MECC::TraceComment(Translate("=================================== GetAllLabware - FINISH"));
  }

  function Abstract(  ) void {
    private variable str_CurrentVersion;
    str_CurrentVersion = Translate("1.5.0");
    Trace("Position Teaching Controller Version:  ",str_CurrentVersion);
    STAR_TEACHING::INIT::InitializeVariables();
    INIT_RCK_VALUES::InitFunction();
    INIT_CTR_VALUES::InitFunction();
    INIT_LID_VALUES::InitFunction();
    INIT_TML_VALUES::InitFunction();
  }

  function SelectLabwareToTeach( device & ML_STAR, variable & i_arr_LabwareTaught[], variable & o_arr_LabwareToTeach[] ) variable {
    private variable retValueDialog;
    private variable arr_PrevTaughtLabware[];
    private variable arr_LabwareOnDeck[];
    private variable int_VisualState;
    private variable flt_PlateZCoord;
    private variable str_PlateName;
    private variable str_PlateTeachWell;
    private variable flt_PlateYCoord;
    private variable str_PlateCarrier;
    private variable flt_PlateXCoord;
    private variable str_PlateLabID;
    private variable str_PlateCarrierSite;
    private variable int_GroupValue;
    private variable str_PlateConfigFile;
    private variable str_SQL_Order;
    private file ReadFiles;
    private variable bln_Done;
    private variable int_LabwareOnDeckSelected;
    private variable PrevTaughtSelected;
    private variable int_TotalTaught;
    private variable i;
    private variable str_LabwareToTeachText;
    private variable arr_NotExpectedValues[];
    private variable arr_MissingValues[];
    private variable int_TotalPrevTaught;
    private variable int_TotalOnDeck;
    private variable bln_PrevTaughtValid;
    private variable bln_OnDeckValid;
    private variable bln_MeasureValid;
    private dialog customDialog_2;
    private dialog customDialog_3;
    private variable int_TotalLabwareToTeach;
    private dialog customDialog_4;
    o_arr_LabwareToTeach.SetSize( 0);
    MECC::TraceComment(Translate("=================================== SelectLabwareToTeach - START"));
    MOVEMENT_CONTROLLER::LockDoors(ML_STAR, STAR_TEACHING::BOOL::FALSE);
    retValueDialog = -1;
    {
      while (1 == 1)
      {
        ResetLabwareVisState(ML_STAR);
        o_arr_LabwareToTeach.SetSize(0);
        arr_PrevTaughtLabware.SetSize(0);
        arr_LabwareOnDeck.SetSize(0);
        str_SQL_Order = StrConcat2(Translate("SELECT * FROM [PLATES] ORDER BY [LAB_ID] ASC"), Translate(""));
        ReadFiles.AddField("CARRIER", str_PlateCarrier, hslString, 255);
        ReadFiles.AddField("SITE", str_PlateCarrierSite, hslString, 255);
        ReadFiles.AddField("LAB_ID", str_PlateLabID, hslString, 255);
        ReadFiles.AddField("CONFIG_FILE", str_PlateConfigFile, hslString, 255);
        ReadFiles.AddField("LAB_NAME", str_PlateName, hslString, 255);
        ReadFiles.AddField("X_COORD", flt_PlateXCoord, hslFloat);
        ReadFiles.AddField("Y_COORD", flt_PlateYCoord, hslFloat);
        ReadFiles.AddField("Z_COORD", flt_PlateZCoord, hslFloat);
        ReadFiles.AddField("TEACH_INDEX", str_PlateTeachWell, hslString, 255);
        ReadFiles.AddField("VIS_STATE", int_VisualState, hslInteger);
        ReadFiles.AddField("TAUGHT_BEFORE", int_GroupValue, hslInteger);
        if( 0 == ReadFiles.Open(STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH + " " + "PLATES", hslRead, str_SQL_Order) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH, "HxMetEdCompCmd");
        }
        {
          while (
             (ReadFiles.Eof() == 0)
          )
          {
            if( 0 == ReadFiles.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            bln_Done = HSLExtensions::Array::ContainsValue(i_arr_LabwareTaught, str_PlateLabID);
            if (bln_Done == STAR_TEACHING::BOOL::FALSE)
            {
              if (int_GroupValue == 1)
              {
                arr_PrevTaughtLabware.AddAsLast(str_PlateLabID);
              }
              else
              {
                arr_LabwareOnDeck.AddAsLast(str_PlateLabID);
              }
            }
          }
        }
        if( 0 != ReadFiles.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        ReadFiles.RemoveFields();
        Util2::Debug::TraceArray(Translate("Labware already taught"), i_arr_LabwareTaught);
        Util2::Debug::TraceArray(Translate("Labware previously taught"), arr_PrevTaughtLabware);
        Util2::Debug::TraceArray(Translate("Labware left on the deck"), arr_LabwareOnDeck);
        {
          while (1 == 1)
          {
            bln_PrevTaughtValid = STAR_TEACHING::BOOL::TRUE;
            bln_OnDeckValid = STAR_TEACHING::BOOL::TRUE;
            bln_MeasureValid = STAR_TEACHING::BOOL::TRUE;
            str_LabwareToTeachText = Translate("");
            int_TotalTaught=o_arr_LabwareToTeach.GetSize();
            int_TotalPrevTaught=arr_PrevTaughtLabware.GetSize();
            int_TotalOnDeck=arr_LabwareOnDeck.GetSize();
            {
              for(i = 0; i < int_TotalTaught;)
              {
                i = i + 1;
                if (i == 1)
                {
                  str_LabwareToTeachText = StrConcat4(i, Translate(".  "), o_arr_LabwareToTeach.ElementAt( i -1), Translate("\n"));
                }
                else
                {
                  str_LabwareToTeachText = StrConcat8(str_LabwareToTeachText, i, Translate(".  "), o_arr_LabwareToTeach.ElementAt( i -1), Translate("\n"), Translate(""), Translate(""), Translate(""));
                }
              }
            }
            if (int_TotalPrevTaught == 0)
            {
              bln_PrevTaughtValid = STAR_TEACHING::BOOL::FALSE;
            }
            if (int_TotalOnDeck == 0)
            {
              bln_OnDeckValid = STAR_TEACHING::BOOL::FALSE;
            }
            if (int_TotalTaught == 0)
            {
              bln_MeasureValid = STAR_TEACHING::BOOL::FALSE;
            }
            if (int_TotalTaught == 16)
            {
              bln_PrevTaughtValid = STAR_TEACHING::BOOL::FALSE;
              bln_OnDeckValid = STAR_TEACHING::BOOL::FALSE;
            }
            customDialog_2.InitCustomDialog("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");
            customDialog_2.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arr_PrevTaughtLabware );
            customDialog_2.SetCustomDialogArrayProperty( "comboBox2.ItemsSource", arr_LabwareOnDeck );
            customDialog_2.SetCustomDialogProperty( "textBlock2.Text", str_LabwareToTeachText );
            customDialog_2.SetCustomDialogProperty( "comboBox1.IsEnabled", bln_PrevTaughtValid );
            customDialog_2.SetCustomDialogProperty( "comboBox2.IsEnabled", bln_OnDeckValid );
            customDialog_2.SetCustomDialogProperty( "button1.IsEnabled", bln_PrevTaughtValid );
            customDialog_2.SetCustomDialogProperty( "button2.IsEnabled", bln_OnDeckValid );
            customDialog_2.SetCustomDialogProperty( "button4.IsEnabled", bln_MeasureValid );
            customDialog_2.ShowCustomDialog();
            retValueDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
            PrevTaughtSelected = customDialog_2.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
            int_LabwareOnDeckSelected = customDialog_2.GetCustomDialogProperty( "comboBox2.SelectedIndex" );
            if (retValueDialog == 1)
            {
              break;
            }
            if (retValueDialog == 2)
            {
              MECC::TraceComment(Translate("##################################################\nBACK\n##################################################"));
              MECC::TraceComment(Translate("=================================== SelectLabwareToTeach - FINISH"));
              ResetLabwareVisState(ML_STAR);
              return (retValueDialog);
            }
            if (retValueDialog == 6)
            {
              o_arr_LabwareToTeach.AddAsLast(arr_PrevTaughtLabware.ElementAt( PrevTaughtSelected -1));
              HSLExtensions::Array::CompareArrays(o_arr_LabwareToTeach, arr_PrevTaughtLabware, arr_MissingValues, arr_NotExpectedValues);
              SetVisStateOfLabwareAndTemplate(ML_STAR, arr_PrevTaughtLabware.ElementAt( PrevTaughtSelected -1), 5);
              arr_PrevTaughtLabware=arr_NotExpectedValues;
            }
            if (retValueDialog == 7)
            {
              o_arr_LabwareToTeach.AddAsLast(arr_LabwareOnDeck.ElementAt( int_LabwareOnDeckSelected -1));
              HSLExtensions::Array::CompareArrays(o_arr_LabwareToTeach, arr_LabwareOnDeck, arr_MissingValues, arr_NotExpectedValues);
              SetVisStateOfLabwareAndTemplate(ML_STAR, arr_LabwareOnDeck.ElementAt( int_LabwareOnDeckSelected -1), 5);
              arr_LabwareOnDeck=arr_NotExpectedValues;
            }
          }
        }
        if (retValueDialog == 2)
        {
          break;
        }
        if(0){
          customDialog_4.InitCustomDialog("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");
          customDialog_4.SetCustomDialogProperty( "textBlock2.Text", str_LabwareToTeachText );
          customDialog_4.SetCustomDialogProperty( "button4.IsEnabled", bln_MeasureValid );
          customDialog_4.ShowCustomDialog();
          retValueDialog = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
        }
        customDialog_3.InitCustomDialog("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");
        customDialog_3.SetCustomDialogProperty( "textBlock2.Text", str_LabwareToTeachText );
        customDialog_3.SetCustomDialogProperty( "button4.IsEnabled", bln_MeasureValid );
        customDialog_3.ShowCustomDialog();
        retValueDialog = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
        if (retValueDialog == 1)
        {
          break;
        }
      }
    }
    ResetLabwareVisState(ML_STAR);
    Util2::Debug::TraceArray(Translate("Labware to teach"), o_arr_LabwareToTeach);
    int_TotalLabwareToTeach=o_arr_LabwareToTeach.GetSize();
    {
      for(i = 0; i < int_TotalLabwareToTeach;)
      {
        i = i + 1;
        SetVisStateOfLabwareAndTemplate(ML_STAR, o_arr_LabwareToTeach.ElementAt( i -1), 1);
      }
    }
    MECC::TraceComment(Translate("=================================== SelectLabwareToTeach - FINISH"));
    return (retValueDialog);
  }

  function ResetLabwareVisState( device & ML_STAR ) void {
    private variable int_VisualState;
    private variable flt_PlateZCoord;
    private variable str_PlateName;
    private variable str_PlateTeachWell;
    private variable flt_PlateYCoord;
    private variable str_PlateCarrier;
    private variable flt_PlateXCoord;
    private variable str_SQL_Order;
    private variable str_PlateLabID;
    private variable str_PlateCarrierSite;
    private variable int_GroupValue;
    private variable str_PlateConfigFile;
    private file ReadFiles;
    private variable arr_LabID[];
    private variable arr_VisState[];
    private variable str_CarrierConfigFile;
    private variable int_CarrierTracks;
    private variable flt_CarrierZCoord;
    private variable flt_CarrierYCoord;
    private variable flt_CarrierXCoord;
    private variable str_CarrierLabID;
    private variable int_CarrierTrack;
    private variable str_CarrierName;
    private variable str_TipConfigFile;
    private variable flt_TipLength;
    private variable flt_TipZCoord;
    private variable flt_TipYCoord;
    private variable flt_TipXCoord;
    private variable int_TipType;
    private variable str_TipName;
    private variable str_TipLabID;
    private variable int_CurrentVisState;
    MECC::TraceComment(Translate("=================================== ResetLabwareVisState  - START"));
    arr_LabID.SetSize(0);
    arr_VisState.SetSize(0);
    str_SQL_Order = StrConcat2(Translate("SELECT * FROM [PLATES] ORDER BY [LAB_ID] ASC"), Translate(""));
    ReadFiles.AddField("CARRIER", str_PlateCarrier, hslString, 255);
    ReadFiles.AddField("SITE", str_PlateCarrierSite, hslString, 255);
    ReadFiles.AddField("LAB_ID", str_PlateLabID, hslString, 255);
    ReadFiles.AddField("CONFIG_FILE", str_PlateConfigFile, hslString, 255);
    ReadFiles.AddField("LAB_NAME", str_PlateName, hslString, 255);
    ReadFiles.AddField("X_COORD", flt_PlateXCoord, hslFloat);
    ReadFiles.AddField("Y_COORD", flt_PlateYCoord, hslFloat);
    ReadFiles.AddField("Z_COORD", flt_PlateZCoord, hslFloat);
    ReadFiles.AddField("TEACH_INDEX", str_PlateTeachWell, hslString, 255);
    ReadFiles.AddField("VIS_STATE", int_VisualState, hslInteger);
    ReadFiles.AddField("TAUGHT_BEFORE", int_GroupValue, hslInteger);
    if( 0 == ReadFiles.Open(STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH + " " + "PLATES", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH, "HxMetEdCompCmd");
    }
    {
      while (
         (ReadFiles.Eof() == 0)
      )
      {
        if( 0 == ReadFiles.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        TEACHING_SUPPORT::GetLabwareVisibility(ML_STAR, str_PlateLabID, int_CurrentVisState);
        if (int_CurrentVisState != int_VisualState)
        {
          arr_LabID.AddAsLast(str_PlateLabID);
          arr_VisState.AddAsLast(int_VisualState);
        }
      }
    }
    if( 0 != ReadFiles.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    ReadFiles.RemoveFields();
    ReadFiles.AddField("TRACK", int_CarrierTrack, hslInteger);
    ReadFiles.AddField("LAB_ID", str_CarrierLabID, hslString, 255);
    ReadFiles.AddField("CONFIG_FILE", str_CarrierConfigFile, hslString, 255);
    ReadFiles.AddField("CARRIER_NAME", str_CarrierName, hslString, 255);
    ReadFiles.AddField("X_COORD", flt_CarrierXCoord, hslFloat);
    ReadFiles.AddField("Y_COORD", flt_CarrierYCoord, hslFloat);
    ReadFiles.AddField("Z_COORD", flt_CarrierZCoord, hslFloat);
    ReadFiles.AddField("TOTAL_TRACKS", int_CarrierTracks, hslInteger);
    ReadFiles.AddField("VIS_STATE", int_VisualState, hslInteger);
    if( 0 == ReadFiles.Open(STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH + " " + "CARRIERS", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH, "HxMetEdCompCmd");
    }
    {
      while (
         (ReadFiles.Eof() == 0)
      )
      {
        if( 0 == ReadFiles.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        TEACHING_SUPPORT::Deck_Visualize(ML_STAR, str_CarrierLabID, int_CurrentVisState);
        if (int_CurrentVisState != int_VisualState)
        {
          arr_LabID.AddAsLast(str_CarrierLabID);
          arr_VisState.AddAsLast(int_VisualState);
        }
      }
    }
    if( 0 != ReadFiles.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    ReadFiles.RemoveFields();
    ReadFiles.AddField("TYPE", int_TipType, hslInteger);
    ReadFiles.AddField("LAB_ID", str_TipLabID, hslString, 255);
    ReadFiles.AddField("CONFIG_FILE", str_TipConfigFile, hslString, 255);
    ReadFiles.AddField("X_COORD", flt_TipXCoord, hslFloat);
    ReadFiles.AddField("Y_COORD", flt_TipYCoord, hslFloat);
    ReadFiles.AddField("Z_COORD", flt_TipZCoord, hslFloat);
    ReadFiles.AddField("TIP_LENGTH", flt_TipLength, hslFloat);
    ReadFiles.AddField("TIP_NAME", str_TipName, hslString, 255);
    ReadFiles.AddField("VIS_STATE", int_VisualState, hslInteger);
    if( 0 == ReadFiles.Open(STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH + " " + "TIP_POSITIONS", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH, "HxMetEdCompCmd");
    }
    {
      while (
         (ReadFiles.Eof() == 0)
      )
      {
        if( 0 == ReadFiles.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        TEACHING_SUPPORT::GetLabwareVisibility(ML_STAR, str_TipLabID, int_CurrentVisState);
        if (int_CurrentVisState != int_VisualState)
        {
          arr_LabID.AddAsLast(str_TipLabID);
          arr_VisState.AddAsLast(int_VisualState);
        }
      }
    }
    if( 0 != ReadFiles.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    ReadFiles.RemoveFields();
    DeckVisualize::UpdateLoadedLabware(ML_STAR, arr_LabID, arr_VisState, Translate("Reset the vis state to where it was before teaching"));
    MECC::TraceComment(Translate("=================================== ResetLabwareVisState  - FINISH"));
  }

  function SetVisStateOfLabwareAndTemplate( device & ML_STAR, variable i_str_LabwareID, variable i_int_VisState ) void {
    private variable int_VisualState;
    private variable flt_PlateZCoord;
    private variable str_PlateName;
    private variable str_PlateTeachWell;
    private variable flt_PlateYCoord;
    private variable str_PlateCarrier;
    private variable flt_PlateXCoord;
    private variable str_PlateLabID;
    private variable str_PlateCarrierSite;
    private variable int_GroupValue;
    private variable str_PlateConfigFile;
    private file ReadFiles;
    private variable str_SQL_Filter;
    private variable str_SQL_Count;
    private variable int_LabwareFound;
    private variable arr_Labware[];
    private variable arr_VisState[];
    private variable bln_LabwareValid;
    str_SQL_Count = StrConcat4(Translate("SELECT COUNT(*) AS N FROM [PLATES] WHERE [LAB_ID] = '"), i_str_LabwareID, Translate("'"), Translate(""));
    ReadFiles.AddField("N", int_LabwareFound, hslInteger);
    if( 0 == ReadFiles.Open(STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH + " " + "PLATES", hslRead, str_SQL_Count) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH, "HxMetEdCompCmd");
    }
    if( 0 == ReadFiles.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != ReadFiles.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    ReadFiles.RemoveFields();
    if (int_LabwareFound == 0)
    {
      MECC::TraceComment(Translate("####################################################\nLABWARE NOT FOUND!\n####################################################"));
      return;
    }
    str_SQL_Filter = StrConcat4(Translate("SELECT * FROM [PLATES] WHERE [LAB_ID] = '"), i_str_LabwareID, Translate("'"), Translate(""));
    ReadFiles.AddField("CARRIER", str_PlateCarrier, hslString, 255);
    ReadFiles.AddField("SITE", str_PlateCarrierSite, hslString, 255);
    ReadFiles.AddField("LAB_ID", str_PlateLabID, hslString, 255);
    ReadFiles.AddField("CONFIG_FILE", str_PlateConfigFile, hslString, 255);
    ReadFiles.AddField("LAB_NAME", str_PlateName, hslString, 255);
    ReadFiles.AddField("X_COORD", flt_PlateXCoord, hslFloat);
    ReadFiles.AddField("Y_COORD", flt_PlateYCoord, hslFloat);
    ReadFiles.AddField("Z_COORD", flt_PlateZCoord, hslFloat);
    ReadFiles.AddField("TEACH_INDEX", str_PlateTeachWell, hslString, 255);
    ReadFiles.AddField("VIS_STATE", int_VisualState, hslInteger);
    ReadFiles.AddField("TAUGHT_BEFORE", int_GroupValue, hslInteger);
    if( 0 == ReadFiles.Open(STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH + " " + "PLATES", hslRead, str_SQL_Filter) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH, "HxMetEdCompCmd");
    }
    if( 0 == ReadFiles.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != ReadFiles.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    ReadFiles.RemoveFields();
    arr_Labware.SetSize(0);
    arr_VisState.SetSize(0);
    bln_LabwareValid = DevIsValidLabwareForCurrentDeckLayout(ML_STAR, str_PlateCarrier);
    if (bln_LabwareValid == STAR_TEACHING::BOOL::TRUE)
    {
      arr_Labware.AddAsLast(str_PlateCarrier);
      if (i_int_VisState == 0)
      {
        arr_VisState.AddAsLast(0);
      }
      else
      {
        arr_VisState.AddAsLast(1);
      }
    }
    arr_Labware.AddAsLast(str_PlateLabID);
    arr_VisState.AddAsLast(i_int_VisState);
    DeckVisualize::UpdateLoadedLabware(ML_STAR, arr_Labware, arr_VisState, Translate(""));
  }

  function GetLabwareInformation( variable i_str_LabwareID ) void {
    private variable int_LabwareFound;
    private variable str_SQL_Count;
    private file ReadFiles;
    private variable str_SQL_Filter;
    private file QueryFiles;
    MECC::TraceComment(Translate("=================================== GetLabwareInformation - START"));
    str_SQL_Count = StrConcat4(Translate("SELECT COUNT(*) AS N FROM [PLATES] WHERE [LAB_ID] = '"), i_str_LabwareID, Translate("'"), Translate(""));
    ReadFiles.AddField("N", int_LabwareFound, hslInteger);
    if( 0 == ReadFiles.Open(STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH + " " + "PLATES", hslRead, str_SQL_Count) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH, "HxMetEdCompCmd");
    }
    if( 0 == ReadFiles.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != ReadFiles.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    ReadFiles.RemoveFields();
    if (int_LabwareFound == 0)
    {
      MECC::TraceComment(Translate("####################################################\nLABWARE NOT FOUND!\n####################################################"));
      return;
    }
    str_SQL_Filter = StrConcat4(Translate("SELECT * FROM [PLATES] WHERE [LAB_ID] = '"), i_str_LabwareID, Translate("'"), Translate(""));
    QueryFiles.AddField("CARRIER", STAR_TEACHING::TEACH_POSITION::CARRIER, hslString, 255);
    QueryFiles.AddField("SITE", STAR_TEACHING::TEACH_POSITION::SITE, hslString, 255);
    QueryFiles.AddField("LAB_ID", STAR_TEACHING::TEACH_POSITION::LAB_ID, hslString, 255);
    QueryFiles.AddField("CONFIG_FILE", STAR_TEACHING::TEACH_POSITION::CONFIG_FILE, hslString, 255);
    QueryFiles.AddField("LAB_NAME", STAR_TEACHING::TEACH_POSITION::LAB_NAME, hslString, 255);
    QueryFiles.AddField("X_COORD", STAR_TEACHING::TEACH_POSITION::TAUGHT_X, hslFloat);
    QueryFiles.AddField("Y_COORD", STAR_TEACHING::TEACH_POSITION::TAUGHT_Y, hslFloat);
    QueryFiles.AddField("Z_COORD", STAR_TEACHING::TEACH_POSITION::TAUGHT_Z, hslFloat);
    QueryFiles.AddField("TEACH_INDEX", STAR_TEACHING::TEACH_POSITION::TEACH_INDEX, hslString, 255);
    if( 0 == QueryFiles.Open(STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH + " " + "PLATES", hslRead, str_SQL_Filter) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH, "HxMetEdCompCmd");
    }
    if( 0 == QueryFiles.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != QueryFiles.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    QueryFiles.RemoveFields();
    MECC::TraceComment(Translate("=================================== GetLabwareInformation - FINISH"));
  }

  function ConfirmCurrentLabware( device & ML_STAR ) variable {
    private variable retValueDialog;
    private variable str_SQL_Count;
    private variable bool_ImageExists;
    private variable str_RackImageFilePath;
    private variable str_SQL_Filter;
    private variable int_CarrierExists;
    private variable str_CarrierName;
    private variable int_TrackNumber;
    private file QueryFiles;
    private variable str_RackImageRel;
    private variable flt_NotUsed;
    private sequence seq_Temp_TeachPosition;
    private dialog customDialog_5;
    private variable str_ChannelPattern;
    private variable flt_WorkingChannelY;
    private variable flt_SecondaryChannelY;
    private variable int_ChIndex;
    private variable arr_MoveY[];
    private variable arr_MoveZ[];
    private variable arr_ChannelPattern[];
    MECC::TraceComment(Translate("=================================== ConfirmCurrentLabware - START"));
    retValueDialog = -1;
    TEACHING_SUPPORT::Deck_Visualize(ML_STAR, STAR_TEACHING::TEACH_POSITION::LAB_ID, 5);
    bool_ImageExists = STAR_TEACHING::BOOL::FALSE;
    LPQ::FILE_GetDefinitionFileValue(STAR_TEACHING::TEACH_POSITION::CONFIG_FILE, Translate("ImageRel"), str_RackImageRel);
    if (str_RackImageRel != "")
    {
      LABWAREEDIT_RCK::_GetFullPathFromRelative(str_RackImageRel, STAR_TEACHING::TEACH_POSITION::CONFIG_FILE, str_RackImageFilePath);
      bool_ImageExists = HSLExtensions::File::Exists(str_RackImageFilePath);
      Trace("Rack Image:  ",str_RackImageFilePath);
      Trace("Image Exists:  ",bool_ImageExists);
    }
    TEACHING_SUPPORT::Deck_Visualize(ML_STAR, STAR_TEACHING::TEACH_POSITION::LAB_ID, 5);
    str_SQL_Count = StrConcat4(Translate("SELECT COUNT(*) AS N FROM [CARRIERS] WHERE LAB_ID = '"), STAR_TEACHING::TEACH_POSITION::CARRIER, Translate("'"), Translate(""));
    QueryFiles.AddField("N", int_CarrierExists, hslInteger);
    if( 0 == QueryFiles.Open(STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH + " " + "CARRIERS", hslRead, str_SQL_Count) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH, "HxMetEdCompCmd");
    }
    if( 0 == QueryFiles.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != QueryFiles.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    QueryFiles.RemoveFields();
    if (int_CarrierExists > 0)
    {
      str_SQL_Filter = StrConcat4(Translate("SELECT [TRACK], [CARRIER_NAME] FROM [CARRIERS] WHERE LAB_ID = '"), STAR_TEACHING::TEACH_POSITION::CARRIER, Translate("'"), Translate(""));
      QueryFiles.AddField("TRACK", int_TrackNumber, hslInteger);
      QueryFiles.AddField("CARRIER_NAME", str_CarrierName, hslString, 255);
      if( 0 == QueryFiles.Open(STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH + " " + "CARRIERS", hslRead, str_SQL_Filter) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, STAR_TEACHING::POSITION_TEACH::CURRENT_LAYOUT_TRACKING_PATH, "HxMetEdCompCmd");
      }
      if( 0 == QueryFiles.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != QueryFiles.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      QueryFiles.RemoveFields();
    }
    else
    {
      int_TrackNumber = Translate("NONE");
      str_CarrierName = Translate("NONE");
    }
    DevGetLabwarePosition(ML_STAR, STAR_TEACHING::TEACH_POSITION::LAB_ID, STAR_TEACHING::TEACH_POSITION::CURRENT_X, STAR_TEACHING::TEACH_POSITION::CURRENT_Y, STAR_TEACHING::TEACH_POSITION::CURRENT_Z, flt_NotUsed);
    TEACHING_SUPPORT::_RemoveExcessDigits(STAR_TEACHING::TEACH_POSITION::CURRENT_X);
    TEACHING_SUPPORT::_RemoveExcessDigits(STAR_TEACHING::TEACH_POSITION::CURRENT_Y);
    TEACHING_SUPPORT::_RemoveExcessDigits(STAR_TEACHING::TEACH_POSITION::CURRENT_Z);
    Trace("");
    Trace("     ","Measure Labware ",STAR_TEACHING::TEACH_POSITION::LAB_ID);
    Trace("     ","Original X Coord:  ",STAR_TEACHING::TEACH_POSITION::CURRENT_X);
    Trace("     ","Original Y Coord:  ",STAR_TEACHING::TEACH_POSITION::CURRENT_Y);
    Trace("     ","Original Z Coord:  ",STAR_TEACHING::TEACH_POSITION::CURRENT_Z);
    Trace("");
    SeqRemoveAll(seq_Temp_TeachPosition);
    SeqAdd(seq_Temp_TeachPosition, STAR_TEACHING::TEACH_POSITION::LAB_ID, STAR_TEACHING::TEACH_POSITION::TEACH_INDEX);
    seq_Temp_TeachPosition.SetCurrentPosition(1);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp_TeachPosition, 1, Translate("Processing well"));
    arr_ChannelPattern.SetSize(0);
    arr_MoveY.SetSize(0);
    arr_MoveZ.SetSize(0);
    str_ChannelPattern = Translate("");
    {
      for(int_ChIndex = 0; int_ChIndex < STAR_TEACHING::INT::TOTAL_CHANNELS;)
      {
        int_ChIndex = int_ChIndex + 1;
        arr_ChannelPattern.AddAsLast(0);
        arr_MoveY.AddAsLast(0.0);
        arr_MoveZ.AddAsLast(0.0);
      }
    }
    arr_ChannelPattern.SetAt(STAR_TEACHING::INT::WORKING_CHANNEL-1, 1);
    arr_ChannelPattern.SetAt(STAR_TEACHING::INT::SECONDARY_CHANNEL-1, 1);
    {
      for(int_ChIndex = 0; int_ChIndex < STAR_TEACHING::INT::TOTAL_CHANNELS;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChannelPattern = StrConcat2(str_ChannelPattern, arr_ChannelPattern.ElementAt( int_ChIndex -1));
      }
    }
    if (STAR_TEACHING::INT::WORKING_CHANNEL > STAR_TEACHING::INT::SECONDARY_CHANNEL)
    {
      flt_WorkingChannelY = STAR_TEACHING::TEACH_POSITION::TAUGHT_Y - 4.5;
      flt_SecondaryChannelY = STAR_TEACHING::TEACH_POSITION::TAUGHT_Y + 4.5;
    }
    else
    {
      flt_WorkingChannelY = STAR_TEACHING::TEACH_POSITION::TAUGHT_Y + 4.5;
      flt_SecondaryChannelY = STAR_TEACHING::TEACH_POSITION::TAUGHT_Y - 4.5;
    }
    arr_MoveY.SetAt(STAR_TEACHING::INT::WORKING_CHANNEL-1, flt_WorkingChannelY);
    arr_MoveY.SetAt(STAR_TEACHING::INT::SECONDARY_CHANNEL-1, flt_SecondaryChannelY);
    arr_MoveZ.SetAt(STAR_TEACHING::INT::WORKING_CHANNEL-1, 270.0);
    arr_MoveZ.SetAt(STAR_TEACHING::INT::SECONDARY_CHANNEL-1, 270.0);
    MOVEMENT_CONTROLLER::MoveChannelsToPosition(ML_STAR, str_ChannelPattern, 270.0, STAR_TEACHING::TEACH_POSITION::TAUGHT_X, arr_MoveY, arr_MoveZ);
    if(0){
      MOVEMENT_CONTROLLER::MoveChannelToPosition(ML_STAR, 270.0, STAR_TEACHING::TEACH_POSITION::TAUGHT_X, STAR_TEACHING::TEACH_POSITION::TAUGHT_Y, 270.0);
    }
    MOVEMENT_CONTROLLER::LockDoors(ML_STAR, STAR_TEACHING::BOOL::FALSE);
    if (bool_ImageExists == STAR_TEACHING::BOOL::FALSE)
    {
      str_RackImageFilePath = Translate("_003_Information");
    }
    customDialog_5.InitCustomDialog("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");
    customDialog_5.SetCustomDialogProperty( "image1.Source", str_RackImageFilePath );
    customDialog_5.SetCustomDialogProperty( "textBlock10.ToolTipText", STAR_TEACHING::TEACH_POSITION::LAB_ID );
    customDialog_5.SetCustomDialogProperty( "textBlock10.Text", STAR_TEACHING::TEACH_POSITION::LAB_ID );
    customDialog_5.SetCustomDialogProperty( "textBlock11.ToolTipText", STAR_TEACHING::TEACH_POSITION::LAB_NAME );
    customDialog_5.SetCustomDialogProperty( "textBlock11.Text", STAR_TEACHING::TEACH_POSITION::LAB_NAME );
    customDialog_5.SetCustomDialogProperty( "textBlock12.ToolTipText", int_TrackNumber );
    customDialog_5.SetCustomDialogProperty( "textBlock12.Text", int_TrackNumber );
    customDialog_5.SetCustomDialogProperty( "textBlock13.Text", str_CarrierName );
    customDialog_5.SetCustomDialogProperty( "textBlock13.ToolTipText", str_CarrierName );
    customDialog_5.SetCustomDialogProperty( "textBlock14.Text", STAR_TEACHING::TEACH_POSITION::SITE );
    customDialog_5.SetCustomDialogProperty( "textBlock14.ToolTipText", STAR_TEACHING::TEACH_POSITION::SITE );
    customDialog_5.SetCustomDialogProperty( "textBlock15.Text", STAR_TEACHING::TEACH_POSITION::CURRENT_X );
    customDialog_5.SetCustomDialogProperty( "textBlock16.Text", STAR_TEACHING::TEACH_POSITION::CURRENT_Y );
    customDialog_5.SetCustomDialogProperty( "textBlock17.Text", STAR_TEACHING::TEACH_POSITION::CURRENT_Z );
    customDialog_5.ShowCustomDialog();
    retValueDialog = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
    TEACHING_SUPPORT::Deck_Visualize(ML_STAR, STAR_TEACHING::TEACH_POSITION::LAB_ID, 1);
    if (retValueDialog == 2)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp_TeachPosition, 5, Translate("Processing well"));
      ResetLabwareVisState(ML_STAR);
      MECC::TraceComment(Translate("############################################################\nSKIP LABWARE\n############################################################"));
      MECC::TraceComment(Translate("=================================== ConfirmCurrentLabware - FINISH"));
      return (retValueDialog);
    }
    if(0){
      GetLabwareInformation(STAR_TEACHING::TEACH_POSITION::LAB_ID);
    }
    MECC::TraceComment(Translate("=================================== ConfirmCurrentLabware - FINISH"));
    return (retValueDialog);
  }

  function MeasureLabwarePosition( device & ML_STAR, variable & o_flt_DeltaX, variable & o_flt_DeltaY, variable & o_flt_DeltaZ ) void {
    private sequence seq_TeachPlate;
    private variable flt_RackClearanceHeight;
    private variable flt_RackHeight;
    private variable flt_X_Coord;
    private variable flt_Y_Coord;
    private variable flt_Z_CoordMin;
    private variable flt_Origin_ZCoord;
    private variable flt_Origin_YCoord;
    private variable flt_Origin_XCoord;
    private variable flt_RackToContainerHeight;
    private variable flt_Z_HeightFound;
    private variable bln_EdgeFound;
    private dialog dialogHandle1;
    private variable int_ReturnValue;
    private variable flt_Z_Coord;
    private variable flt_Measured_YWidth;
    private variable flt_Measured_Y_Center;
    private variable flt_Measured_XWidth;
    private variable flt_Measured_Z_Max;
    private variable flt_Measured_X_Center;
    private variable str_ContainerConfig;
    private variable str_DimX;
    private variable flt_WellDimX;
    private variable flt_ContainerSafeHeight;
    private variable flt_ContainerDepth;
    private variable flt_NotUsed;
    private variable flt_Measured_Z;
    private variable flt_SafeHeight;
    private dialog dialogHandle_6;
    private dialog customDialog_7;
    private dialog customDialog_8;
    private variable flt_MinHeight;
    private variable retValueDialog;
    private variable flt_HeightDifference;
    private variable str_Description;
    private variable flt_DeltaZ;
    private variable flt_X_Adjust;
    private variable flt_Y_Adjust;
    private variable flt_ContainerBaseOffset;
    private variable flt_ContainerThickness;
    private variable flt_ContainerPlane;
    private variable arr_WellWidths[];
    private variable arr_LabwareStack[];
    private variable int_TotalInStack;
    private variable i;
    private variable str_PlateLabID;
    private dialog customDialog_9;
    private variable str_StatusX;
    private variable str_StatusY;
    private variable str_StatusZ;
    private dialog customDialog_10;
    private dialog customDialog_11;
    o_flt_DeltaX = 0;
    o_flt_DeltaY = 0;
    o_flt_DeltaZ = 0;
    MECC::TraceComment(Translate("=================================== MeasureLabwarePosition - START"));
    arr_LabwareStack.SetSize(0);
    LPQ::SEQ_GetDefaultSequence(ML_STAR, STAR_TEACHING::TEACH_POSITION::LAB_ID, 1, seq_TeachPlate);
    LPQ::LABWARE_GetRackHeight(ML_STAR, seq_TeachPlate, STAR_TEACHING::BOOL::TRUE, flt_RackHeight, flt_RackClearanceHeight);
    LPQ::LABWARE_GetLabwareOrigin(ML_STAR, seq_TeachPlate, flt_Origin_XCoord, flt_Origin_YCoord, flt_Origin_ZCoord);
    LPQ::CONT_GetConfigFile(ML_STAR, seq_TeachPlate, str_ContainerConfig);
    LPQ::CONT_GetContainerDepth(ML_STAR, seq_TeachPlate, STAR_TEACHING::BOOL::FALSE, flt_ContainerDepth, flt_NotUsed);
    LPQ::CONT_GetContainerDepth(ML_STAR, seq_TeachPlate, STAR_TEACHING::BOOL::TRUE, flt_NotUsed, flt_ContainerSafeHeight);
    LPQ::CONT_GetContainerBaseThickness(ML_STAR, seq_TeachPlate, flt_ContainerThickness);
    LPQ::LABWARE_GetContainerBaseOffset(ML_STAR, seq_TeachPlate, flt_ContainerBaseOffset);
    arr_WellWidths.SetSize(0);
    LPQ::FILE_GetDefinitionFileValue(str_ContainerConfig, Translate("1.DX"), str_DimX);
    flt_WellDimX = StrFVal(str_DimX);
    arr_WellWidths.AddAsLast(flt_WellDimX);
    LPQ::FILE_GetDefinitionFileValue(str_ContainerConfig, Translate("1.DY"), str_DimX);
    flt_WellDimX = StrFVal(str_DimX);
    arr_WellWidths.AddAsLast(flt_WellDimX);
    LPQ::FILE_GetDefinitionFileValue(str_ContainerConfig, Translate("1.DZ"), str_DimX);
    flt_WellDimX = StrFVal(str_DimX);
    arr_WellWidths.AddAsLast(flt_WellDimX);
    flt_WellDimX = HSLStatisitics::Stat_Max(arr_WellWidths);
    Trace("Well Width:  ",flt_WellDimX);
    if(0){
      flt_X_Coord = flt_Origin_XCoord + 7.0;
    }
    flt_X_Coord = STAR_TEACHING::TEACH_POSITION::TAUGHT_X;
    flt_Y_Coord = flt_Origin_YCoord + 80.0;
    flt_Z_CoordMin = flt_Origin_ZCoord - 1.0;
    flt_ContainerPlane = flt_Origin_ZCoord + flt_ContainerBaseOffset;
    flt_ContainerPlane = flt_ContainerPlane + flt_ContainerThickness;
    flt_ContainerPlane = flt_ContainerPlane + flt_ContainerDepth;
    if(0){
      flt_RackToContainerHeight = flt_ContainerSafeHeight - 5.0;
    }
    flt_RackToContainerHeight = flt_ContainerPlane - flt_RackHeight;
    if (flt_RackToContainerHeight < 0.0)
    {
      flt_RackToContainerHeight = 0.0;
    }
    Trace("Container Plane:  ",flt_ContainerPlane,"  Origin Z:  ",flt_Origin_ZCoord," Base Offset:  ",flt_ContainerBaseOffset,"  Container thickness:  ",flt_ContainerThickness,"  Container Depth:  ",flt_ContainerDepth);
    Trace("Rack Height:  ",flt_RackHeight);
    STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("Tap plate to find the top of the labware"), STAR_TEACHING::BOOL::FALSE, STAR_TEACHING::BOOL::TRUE, STAR_TEACHING::BOOL::TRUE);
    {
      while (1 == 1)
      {
        MECC::TraceComment(Translate("======================================================================\nTAP RACK TO CHECK FOR EXISTENCE\n======================================================================"));
        if(0){
          MOVEMENT_CONTROLLER::MoveChannelToPosition(ML_STAR, 245.0, flt_X_Coord, flt_Y_Coord, 245.0);
          bln_EdgeFound = MOVEMENT_CONTROLLER::SearchZHeight(ML_STAR, STAR_TEACHING::BOOL::FALSE, flt_Z_CoordMin, flt_Z_HeightFound);
        }
        bln_EdgeFound = MOVEMENT_CONTROLLER::CheckPlateWithTwoChannels(ML_STAR, STAR_TEACHING::TEACH_POSITION::LAB_ID, flt_Z_HeightFound);
        if (flt_Z_HeightFound == 0.0)
        {
          flt_Z_HeightFound = flt_RackHeight;
        }
        if (bln_EdgeFound == STAR_TEACHING::BOOL::TRUE)
        {
          if(0){
            MOVEMENT_CONTROLLER::CreateMaximumYForWorkingChannel(ML_STAR);
          }
          break;
        }
        MECC::TraceComment(Translate("*********************************************************************\nPLATE NOT FOUND!!!\n*********************************************************************"));
        if(0){
          MOVEMENT_CONTROLLER::MoveChannelToZCoord(ML_STAR, 245.0);
          dialogHandle1.SetOutput(STAR_TEACHING::TEACH_POSITION::LAB_ID, Translate(" not found!  Make sure labware has bee loaded at the positoin shown on the deck and press retry."));
          int_ReturnValue = dialogHandle1.ShowOutput(Translate("Plate not found!"), hslRetryCancel | hslInformation | hslDefButton1, hslInfinite);
        }
        MOVEMENT_CONTROLLER::LockDoors(ML_STAR, STAR_TEACHING::BOOL::FALSE);
        customDialog_9.InitCustomDialog("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");
        customDialog_9.ShowCustomDialog();
        int_ReturnValue = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
        if (int_ReturnValue == 2)
        {
          MECC::TraceComment(Translate("###############################################################\nCANCEL TEACH\n###############################################################"));
          return;
        }
        MECC::TraceComment(Translate("*********************************************************************\nRETRY\n*********************************************************************"));
      }
    }
    flt_RackClearanceHeight = flt_Z_HeightFound + flt_RackToContainerHeight;
    flt_RackClearanceHeight = flt_RackClearanceHeight + 5.0;
    flt_MinHeight = flt_Z_HeightFound + flt_RackToContainerHeight;
    flt_MinHeight = flt_MinHeight - 2.0;
    Trace("Rack Height:  ",flt_Z_HeightFound);
    Trace("Rack to Container:  ",flt_RackToContainerHeight);
    Trace("Rack Clearance:  ",flt_RackClearanceHeight);
    flt_X_Adjust = STAR_TEACHING::TEACH_POSITION::TAUGHT_X;
    flt_Y_Adjust = STAR_TEACHING::TEACH_POSITION::TAUGHT_Y;
    STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("Confirm over and inside well position"), STAR_TEACHING::BOOL::FALSE, STAR_TEACHING::BOOL::TRUE, STAR_TEACHING::BOOL::TRUE);
    {
      while (1 == 1)
      {
        MOVEMENT_CONTROLLER::MoveChannelToPosition(ML_STAR, 245.0, flt_X_Adjust, flt_Y_Adjust, flt_RackClearanceHeight);
        MECC::TraceComment(Translate("Double check to see if the channel is over the well"));
        {
          while (1 == 1)
          {
            str_Description = StrConcat8(Translate("Confirm that channel "), STAR_TEACHING::INT::WORKING_CHANNEL, Translate(" is positioned rough 2 - 3 mm over well "), STAR_TEACHING::TEACH_POSITION::TEACH_INDEX, Translate(", and not inside the well.  \n\n"), Translate("Click Adjust to move the channel if it is not properly positioned."), Translate(""), Translate(""));
            MOVEMENT_CONTROLLER::LockDoors(ML_STAR, STAR_TEACHING::BOOL::FALSE);
            if(0){
              customDialog_8.InitCustomDialog("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");
              customDialog_8.SetCustomDialogProperty( "textBlock2.Text", str_Description );
              customDialog_8.ShowCustomDialog();
              retValueDialog = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
            }
            customDialog_10.InitCustomDialog("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");
            customDialog_10.SetCustomDialogProperty( "textBlock2.Text", str_Description );
            customDialog_10.ShowCustomDialog();
            retValueDialog = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
            if (retValueDialog == 6)
            {
              break;
            }
            str_Description = StrConcat4(Translate("Move the channel so that it is just over well "), STAR_TEACHING::TEACH_POSITION::TEACH_INDEX, Translate(""), Translate(""));
            MOVEMENT_CONTROLLER::ManuallyMoveChannel_WithDescription(ML_STAR, STAR_TEACHING::TEACH_POSITION::LAB_ID, STAR_TEACHING::TEACH_POSITION::TEACH_INDEX, str_Description);
            if (STAR_TEACHING::BOOL::SIMULATION_MODE == STAR_TEACHING::BOOL::FALSE)
            {
              MOVEMENT_CONTROLLER::GetChannelPosition(ML_STAR, flt_X_Adjust, flt_Y_Adjust, flt_RackClearanceHeight);
            }
          }
        }
        if (flt_MinHeight > flt_RackClearanceHeight)
        {
          flt_MinHeight = flt_RackClearanceHeight - 7.0;
        }
        MOVEMENT_CONTROLLER::MoveChannelToZCoord(ML_STAR, flt_MinHeight);
        MECC::TraceComment(Translate("Double check to see if the channel is within the well"));
        {
          while (1 == 1)
          {
            str_Description = StrConcat8(Translate("Confirm that channel "), STAR_TEACHING::INT::WORKING_CHANNEL, Translate(" is positioned roughly 2mm inside well "), STAR_TEACHING::TEACH_POSITION::TEACH_INDEX, Translate(".  \n\n"), Translate("Click Adjust to move the channel if it is not properly positioned."), Translate(""), Translate(""));
            MOVEMENT_CONTROLLER::LockDoors(ML_STAR, STAR_TEACHING::BOOL::FALSE);
            if(0){
              customDialog_7.InitCustomDialog("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");
              customDialog_7.SetCustomDialogProperty( "textBlock2.Text", str_Description );
              customDialog_7.ShowCustomDialog();
              retValueDialog = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
            }
            customDialog_11.InitCustomDialog("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");
            customDialog_11.SetCustomDialogProperty( "textBlock2.Text", str_Description );
            customDialog_11.ShowCustomDialog();
            retValueDialog = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
            if (retValueDialog == 6)
            {
              break;
            }
            str_Description = StrConcat4(Translate("Move the channel so that it is just inside the well "), STAR_TEACHING::TEACH_POSITION::TEACH_INDEX, Translate(""), Translate(""));
            MOVEMENT_CONTROLLER::ManuallyMoveChannel_WithDescription(ML_STAR, STAR_TEACHING::TEACH_POSITION::LAB_ID, STAR_TEACHING::TEACH_POSITION::TEACH_INDEX, str_Description);
            if (STAR_TEACHING::BOOL::SIMULATION_MODE == STAR_TEACHING::BOOL::FALSE)
            {
              MOVEMENT_CONTROLLER::GetChannelPosition(ML_STAR, flt_X_Adjust, flt_Y_Adjust, flt_MinHeight);
            }
          }
        }
        flt_HeightDifference = flt_RackClearanceHeight - flt_MinHeight;
        Trace("Height Difference:  ",flt_HeightDifference);
        if (STAR_TEACHING::BOOL::SIMULATION_MODE == STAR_TEACHING::BOOL::TRUE)
        {
          break;
        }
        if (flt_HeightDifference < 5.0)
        {
          dialogHandle_6.SetOutput(Translate("The difference between the safe height and the minimum search height is too low.  The safe height and the minimum height must be at least 5 mm appart!"));
          dialogHandle_6.ShowOutput(Translate("Difference too low"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        }
        else
        {
          break;
        }
      }
    }
    MECC::TraceComment(Translate("======================================================================\nFIND WELL CENTER\n======================================================================"));
    STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("Measure X/Y center"), STAR_TEACHING::BOOL::FALSE, STAR_TEACHING::BOOL::TRUE, STAR_TEACHING::BOOL::TRUE);
    if (STAR_TEACHING::BOOL::SIMULATION_MODE == STAR_TEACHING::BOOL::FALSE)
    {
      MOVEMENT_CONTROLLER::FindWellCenter(ML_STAR, flt_MinHeight, flt_RackClearanceHeight, flt_WellDimX, flt_Measured_X_Center, flt_Measured_Y_Center, flt_Measured_Z_Max, flt_Measured_XWidth, flt_Measured_YWidth);
    }
    MECC::TraceComment(Translate("======================================================================\nFIND Z BOTTOM\n======================================================================"));
    STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("Search for Z bottom"), STAR_TEACHING::BOOL::FALSE, STAR_TEACHING::BOOL::TRUE, STAR_TEACHING::BOOL::TRUE);
    Trace("Container depth:  ",flt_ContainerDepth);
    flt_Z_CoordMin = flt_Measured_Z_Max - flt_ContainerDepth;
    flt_Z_CoordMin = flt_Z_CoordMin - 2.0;
    MOVEMENT_CONTROLLER::SearchZHeight(ML_STAR, STAR_TEACHING::BOOL::FALSE, flt_Z_CoordMin, flt_Measured_Z);
    if (STAR_TEACHING::BOOL::SYSTEM_STAR == STAR_TEACHING::BOOL::TRUE)
    {
      flt_Z_Coord = flt_Measured_Z + 5.0;
      flt_Z_CoordMin = flt_Measured_Z - 1.0;
      MOVEMENT_CONTROLLER::MoveChannelToZCoord(ML_STAR, flt_Z_Coord);
      MOVEMENT_CONTROLLER::SearchZHeight(ML_STAR, STAR_TEACHING::BOOL::TRUE, flt_Z_CoordMin, flt_Measured_Z);
    }
    MECC::TraceComment(Translate("======================================================================\nCalculate Offsets\n======================================================================"));
    o_flt_DeltaX = flt_Measured_X_Center - STAR_TEACHING::TEACH_POSITION::TAUGHT_X;
    o_flt_DeltaY = flt_Measured_Y_Center - STAR_TEACHING::TEACH_POSITION::TAUGHT_Y;
    o_flt_DeltaZ = flt_Measured_Z - STAR_TEACHING::TEACH_POSITION::TAUGHT_Z;
    STATUS_UPDATE_CONTROLLER::SetStatusText(Translate("Deltas found:"), STAR_TEACHING::BOOL::FALSE, STAR_TEACHING::BOOL::TRUE, STAR_TEACHING::BOOL::TRUE);
    if (STAR_TEACHING::BOOL::SIMULATION_MODE == STAR_TEACHING::BOOL::TRUE)
    {
      o_flt_DeltaX = 0.0;
      o_flt_DeltaY = 0.0;
      o_flt_DeltaZ = 0.0;
    }
    str_StatusX = StrConcat2(Translate("----- X:  "), o_flt_DeltaX);
    str_StatusY = StrConcat2(Translate("----- Y:  "), o_flt_DeltaY);
    str_StatusZ = StrConcat2(Translate("----- Z:  "), o_flt_DeltaZ);
    STATUS_UPDATE_CONTROLLER::SetStatusText(str_StatusX, STAR_TEACHING::BOOL::FALSE, STAR_TEACHING::BOOL::TRUE, STAR_TEACHING::BOOL::FALSE);
    STATUS_UPDATE_CONTROLLER::SetStatusText(str_StatusY, STAR_TEACHING::BOOL::FALSE, STAR_TEACHING::BOOL::TRUE, STAR_TEACHING::BOOL::FALSE);
    STATUS_UPDATE_CONTROLLER::SetStatusText(str_StatusZ, STAR_TEACHING::BOOL::FALSE, STAR_TEACHING::BOOL::TRUE, STAR_TEACHING::BOOL::FALSE);
    Trace("----------------------------------------------------------");
    Trace("");
    Trace("     ","Delta X:  ",o_flt_DeltaX);
    Trace("     ","Delta Y:  ",o_flt_DeltaY);
    Trace("     ","Delta Z:  ",o_flt_DeltaZ);
    Trace("");
    Trace("----------------------------------------------------------");
    flt_DeltaZ = o_flt_DeltaZ + STAR_TEACHING::TEACH_POSITION::OFFSET_Z;
    str_PlateLabID = SeqGetLabwareId(seq_TeachPlate);
    LPQ::ADJUST_GetCurrentStack(ML_STAR, str_PlateLabID, arr_LabwareStack);
    int_TotalInStack=arr_LabwareStack.GetSize();
    if (int_TotalInStack == 0)
    {
      MECC::TraceComment(Translate("===============================================================\nADJUST SINGLE LABWARE\n==============================================================="));
      LPQ::ADJUST_SetRelativePosition(ML_STAR, seq_TeachPlate, o_flt_DeltaX, o_flt_DeltaY, flt_DeltaZ, 0.0);
      LPQ::ADJUST_SetProperties(ML_STAR, seq_TeachPlate, STAR_TEACHING::TEACH_POSITION::PROPERTY_KEY_GROUP, Translate("1"));
    }
    else
    {
      MECC::TraceComment(Translate("===============================================================\nADJUST STACKED LABWARE\n==============================================================="));
      {
        for(i = 0; i < int_TotalInStack;)
        {
          i = i + 1;
          Trace("Stack Plate Number:  ",i);
          LPQ::SEQ_GetDefaultSequence(ML_STAR, arr_LabwareStack.ElementAt( i -1), 1, seq_TeachPlate);
          LPQ::ADJUST_SetRelativePosition(ML_STAR, seq_TeachPlate, o_flt_DeltaX, o_flt_DeltaY, flt_DeltaZ, 0.0);
          LPQ::ADJUST_SetProperties(ML_STAR, seq_TeachPlate, STAR_TEACHING::TEACH_POSITION::PROPERTY_KEY_GROUP, Translate("1"));
        }
      }
    }
    flt_SafeHeight = flt_Measured_Z + flt_ContainerDepth;
    flt_SafeHeight = flt_SafeHeight + 5.0;
    MOVEMENT_CONTROLLER::MoveChannelToZCoord(ML_STAR, flt_SafeHeight);
    MECC::TraceComment(Translate("=================================== MeasureLabwarePosition - FINISH"));
  }

  function SaveTheDeck( device & ML_STAR ) void {
    private timer WaitForLabware;
    MECC::TraceComment(Translate("=================================== SaveTheDeck - START"));
    ResetLabwareVisState(ML_STAR);
    if( 0 == WaitForLabware.SetTimer(2) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == WaitForLabware.WaitTimer(hslFalse, hslFalse) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (STAR_TEACHING::BOOL::SIMULATION_MODE == STAR_TEACHING::BOOL::FALSE)
    {
      HSLLabwrAccess::SaveChangesToDecklayout(ML_STAR);
    }
    MECC::TraceComment(Translate("=================================== SaveTheDeck - FINISH"));
  }

  function UpdateLogFile( device & ML_STAR, variable i_flt_DeltaX, variable i_flt_DeltaY, variable i_flt_DeltaZ, variable & o_str_LogFilePath ) void {
    private variable str_DeckName;
    private variable str_LogFilePath;
    private variable str_DateTime;
    private variable flt_DeltaX;
    private variable flt_DeltaY;
    private variable flt_New_X;
    private variable flt_DeltaZ;
    private variable flt_New_Y;
    private variable flt_New_Z;
    private variable str_Time;
    private variable bool_FileExists;
    private variable str_Date;
    private variable str_TabName;
    private variable flt_OffsetHeight;
    private file WriteLog;
    private sequence seq_Temp_TeachPosition;
    private variable str_DeckDirectory;
    o_str_LogFilePath = 0;
    MECC::TraceComment(Translate("=================================== UpdateLogFile - START"));
    HSLExtensions::Directory::Create(STAR_TEACHING::LOG_PATH::TEACH_POSITION);
    str_DeckName = HSLExtensions::File::GetFileNameWithoutExtension(STAR_TEACHING::STR::DECK_LAYOUT_PATH);
    str_DeckDirectory = HSLExtensions::File::GetDirectoryName(STAR_TEACHING::STR::DECK_LAYOUT_PATH);
    StrReplace(str_DeckName, Translate(" "), Translate("_"));
    StrReplace(str_DeckName, Translate("."), Translate("_"));
    str_DeckName = StrLeft(str_DeckName, 31);
    if(0){
      str_LogFilePath = StrConcat4(STAR_TEACHING::LOG_PATH::TEACH_POSITION, str_DeckName, Translate(".xls"), Translate(""));
    }
    str_LogFilePath = StrConcat4(str_DeckDirectory, Translate("\\"), str_DeckName, Translate("_TEACH_LOG.xls"));
    flt_DeltaX = i_flt_DeltaX;
    flt_DeltaY = i_flt_DeltaY;
    flt_DeltaZ = i_flt_DeltaZ;
    flt_OffsetHeight = STAR_TEACHING::TEACH_POSITION::OFFSET_Z;
    MECC::TraceComment(Translate("========================================\nSAVE CHANGES TO DECK LAYOUT\n========================================"));
    str_Date = TimGetFormattedDate(Translate("%m/%d/%Y"));
    str_Time = TimGetFormattedTime(Translate("%H:%M"));
    str_DateTime = StrConcat4(str_Date, Translate(" "), str_Time, Translate(""));
    flt_New_X = STAR_TEACHING::TEACH_POSITION::CURRENT_X + flt_DeltaX;
    flt_New_Y = STAR_TEACHING::TEACH_POSITION::CURRENT_Y + flt_DeltaY;
    flt_New_Z = STAR_TEACHING::TEACH_POSITION::CURRENT_Z + flt_DeltaZ;
    bool_FileExists = HSLExtensions::File::Exists(str_LogFilePath);
    if (bool_FileExists == STAR_TEACHING::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("========================================\nADD DATA TO AN EXISTING WORKSHEET\n========================================"));
      EDITFILEATTRIBUTES::Remove_ReadOnly(str_LogFilePath);
      str_TabName = StrConcat2(Translate("POSITION_TEACH_REPORT"), Translate("$"));
      WriteLog.AddField("DATE_TIME", str_DateTime, hslString, 255);
      WriteLog.AddField("PLATE_NAME", STAR_TEACHING::TEACH_POSITION::LAB_NAME, hslString, 255);
      WriteLog.AddField("LABWARE_ID", STAR_TEACHING::TEACH_POSITION::LAB_ID, hslString, 255);
      WriteLog.AddField("CARRIER_ID", STAR_TEACHING::TEACH_POSITION::CARRIER, hslString, 255);
      WriteLog.AddField("CARRIER_SITE", STAR_TEACHING::TEACH_POSITION::SITE, hslString, 255);
      WriteLog.AddField("ORIGINAL_X", STAR_TEACHING::TEACH_POSITION::CURRENT_X, hslFloat);
      WriteLog.AddField("ORIGINAL_Y", STAR_TEACHING::TEACH_POSITION::CURRENT_Y, hslFloat);
      WriteLog.AddField("ORIGINAL_Z", STAR_TEACHING::TEACH_POSITION::CURRENT_Z, hslFloat);
      WriteLog.AddField("NEW_X", flt_New_X, hslFloat);
      WriteLog.AddField("NEW_Y", flt_New_Y, hslFloat);
      WriteLog.AddField("NEW_Z", flt_New_Z, hslFloat);
      WriteLog.AddField("DELTA_X", flt_DeltaX, hslFloat);
      WriteLog.AddField("DELTA_Y", flt_DeltaY, hslFloat);
      WriteLog.AddField("DELTA_Z", flt_DeltaZ, hslFloat);
      WriteLog.AddField("Z_OFFSET", flt_OffsetHeight, hslFloat);
      if( 0 == WriteLog.Open(str_LogFilePath + " " + str_TabName, hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_LogFilePath, "HxMetEdCompCmd");
      }
    }
    else
    {
      MECC::TraceComment(Translate("========================================\nCREATE A NEW FILE\n========================================"));
      str_TabName = Translate("POSITION_TEACH_REPORT");
      WriteLog.AddField("DATE_TIME", str_DateTime, hslString, 255);
      WriteLog.AddField("PLATE_NAME", STAR_TEACHING::TEACH_POSITION::LAB_NAME, hslString, 255);
      WriteLog.AddField("LABWARE_ID", STAR_TEACHING::TEACH_POSITION::LAB_ID, hslString, 255);
      WriteLog.AddField("CARRIER_ID", STAR_TEACHING::TEACH_POSITION::CARRIER, hslString, 255);
      WriteLog.AddField("CARRIER_SITE", STAR_TEACHING::TEACH_POSITION::SITE, hslString, 255);
      WriteLog.AddField("ORIGINAL_X", STAR_TEACHING::TEACH_POSITION::CURRENT_X, hslFloat);
      WriteLog.AddField("ORIGINAL_Y", STAR_TEACHING::TEACH_POSITION::CURRENT_Y, hslFloat);
      WriteLog.AddField("ORIGINAL_Z", STAR_TEACHING::TEACH_POSITION::CURRENT_Z, hslFloat);
      WriteLog.AddField("NEW_X", flt_New_X, hslFloat);
      WriteLog.AddField("NEW_Y", flt_New_Y, hslFloat);
      WriteLog.AddField("NEW_Z", flt_New_Z, hslFloat);
      WriteLog.AddField("DELTA_X", flt_DeltaX, hslFloat);
      WriteLog.AddField("DELTA_Y", flt_DeltaY, hslFloat);
      WriteLog.AddField("DELTA_Z", flt_DeltaZ, hslFloat);
      WriteLog.AddField("Z_OFFSET", flt_OffsetHeight, hslFloat);
      if( 0 == WriteLog.Open(str_LogFilePath + " " + str_TabName, hslWrite) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_LogFilePath, "HxMetEdCompCmd");
      }
    }
    if (STAR_TEACHING::BOOL::SIMULATION_MODE == STAR_TEACHING::BOOL::FALSE)
    {
      if( 0 == WriteLog.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    if( 0 != WriteLog.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WriteLog.RemoveFields();
    EDITFILEATTRIBUTES::Make_ReadOnly(str_LogFilePath);
    SeqRemoveAll(seq_Temp_TeachPosition);
    SeqAdd(seq_Temp_TeachPosition, STAR_TEACHING::TEACH_POSITION::LAB_ID, STAR_TEACHING::TEACH_POSITION::TEACH_INDEX);
    seq_Temp_TeachPosition.SetCurrentPosition(1);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp_TeachPosition, 4, Translate("Make positon flash"));
    o_str_LogFilePath = str_LogFilePath;
    MECC::TraceComment(Translate("=================================== UpdateLogFile - FINISH"));
  }
} // library namespace
