#pragma once
#include "HSLStrLib.hsl"
#include "HSLUtilLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLErrLib.hsl"
#include "HSLExtensions\\String.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLDevLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace STAR_FIRMWARE_CHANNEL_CONTROL {
  function Abstract(  ) void ;
  function CheckPlateWithTwoChannels( device & ML_STAR, variable i_flt_XCenter, variable i_flt_YCenter, variable i_flt_ZMinimumSearchHeight, variable i_flt_ZSpeed, variable i_flt_SearchWidth, variable i_flt_MinimumTraverseHeightBegining, variable i_flt_MinimumTraverseHeightEnding, variable i_int_BackChannel, variable i_int_FrontChannel ) variable ;
  private function CheckPlateWithTwoChannels_NotUsed( device & ML_STAR, variable i_flt_XCenter, variable i_flt_YCenter, variable i_flt_ZMinimumSearchHeight, variable i_flt_ZSpeed, variable i_flt_SearchWidth, variable i_flt_MinimumTraverseHeightBegining, variable i_flt_MinimumTraverseHeightEnding, variable i_int_BackChannel, variable i_int_FrontChannel ) variable ;
  function Create_Maximum_Y_for_Channel( device & ML_STAR, variable i_int_CurrentChannel ) void ;
  function Find_Well_Center( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_MinSearchZ, variable i_flt_TipLength, variable i_flt_SafeHeight, variable & o_flt_X_Center, variable & o_flt_Y_Center, variable & o_flt_ContainerZMax ) void ;
  function Find_Well_Center_2( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_MinSearchZ, variable i_flt_TipLength, variable i_flt_SafeHeight, variable i_flt_WellWidth, variable & o_flt_X_Center, variable & o_flt_Y_Center, variable & o_flt_ContainerZMax ) void ;
  function Find_Well_Center_3( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_MinSearchZ, variable i_flt_TipLength, variable i_flt_SafeHeight, variable i_flt_WellWidth, variable i_flt_InitialSearchIncrement, variable i_flt_FineTuneIncrement, variable & o_flt_X_Center, variable & o_flt_Y_Center, variable & o_flt_ContainerZMax, variable & o_flt_X_Width, variable & o_flt_Y_Width ) void ;
  function GetCLLDStatus( device & ML_STAR, variable i_int_ChannelNumber, variable & o_int_CLLDStatus ) void ;
  function GetStopDiskZCoord( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_ZCoord ) void ;
  function Get_Channel_Position( device & ML_STAR, variable i_int_CurrentChannel, variable & o_X_Coord, variable & o_Y_Coord, variable & o_Z_Coord ) void ;
  function Measure_Well_Center( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_MinSearchZ, variable i_flt_TipLength, variable i_flt_SafeHeight, variable & o_flt_X_Center, variable & o_flt_Y_Center, variable & o_flt_X_Width, variable & o_flt_Y_Width, variable & o_flt_ContainerZMax ) void ;
  function MoveMPH384ToBack( device & ML_STAR ) void ;
  function MoveMPH96ToBack( device & ML_STAR ) void ;
  function Move_Channel_To_Absolute_Position( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_X_Position, variable i_flt_Y_Position, variable i_flt_Z_Position ) void ;
  function Move_Channels_To_Absolute_Position( device & ML_STAR, variable i_str_ChannelPattern, variable i_flt_MinimumZHeightAtBegining, variable i_flt_X_Position, variable & i_arr_Y_Position[], variable & i_arr_Z_Position[] ) void ;
  function Move_X_Relative( device & ML_STAR, variable i_int_MoveDirection, variable i_flt_RelativeDistance ) void ;
  function Move_Y_Relative( device & ML_STAR, variable i_int_CurrentChannel, variable i_int_MoveDirection, variable i_flt_RelativeDistance ) void ;
  function Move_Z_Relative( device & ML_STAR, variable i_int_CurrentChannel, variable i_int_MoveDirection, variable i_flt_RelativeDistance ) void ;
  function Request_X_Ranges( device & ML_STAR, variable & o_flt_LeftXMin, variable & o_flt_LeftXMax, variable & o_flt_RightXMin, variable & o_flt_RightXMax ) void ;
  function Reset_Search_Z( device & ML_STAR ) void ;
  function SearchForCLLD_X( device & ML_STAR, variable i_int_Channel, variable i_flt_DistanceToSearch, variable i_int_DirectionToSearch, variable & o_flt_XCoordinateFound ) variable ;
  private function SearchForCLLD_X_ARCHIVE( device & ML_STAR, variable i_int_Channel, variable i_flt_DistanceToSearch, variable i_int_DirectionToSearch, variable & o_flt_XCoordinateFound ) variable ;
  function SearchForCLLD_Y( device & ML_STAR, variable i_int_Channel, variable i_flt_DistanceToSearch, variable i_int_DirectionToSearch, variable & o_flt_YCoordinateFound ) variable ;
  private function SearchForCLLD_Y_ARCHIVE( device & ML_STAR, variable i_int_Channel, variable i_flt_DistanceToSearch, variable i_int_DirectionToSearch, variable & o_flt_YCoordinateFound ) variable ;
  function SearchForCLLD_Z( device & ML_STAR, variable i_int_Channel, variable i_flt_TipLength, variable i_flt_ZMin, variable i_flt_LLDSearchHeight, variable i_flt_ImmersionDepth, variable i_int_ImmersionDirection, variable i_int_ZLimit, variable & o_flt_ZCoordinateFound ) void ;
  function Search_Z( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_Z_Min, variable i_flt_TipLength, variable i_int_Sensitivity, variable & o_flt_Z_Found ) variable ;
  function Search_Z_Slow( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_Z_Min, variable i_flt_TipLength, variable i_int_Sensitivity, variable & o_flt_Z_Found ) variable ;
  function SwitchLLDMeasurement( device & ML_STAR, variable i_bln_TurnOn ) void ;
  function _CheckForError( variable i_str_FunctionName, variable i_str_ReturnValue, variable i_bool_RaiseError ) void ;
  private function _GetChannelNumber( variable & io_int_ChannelNumber ) void ;
  private function _GetErrorDescriptionMainError( variable i_str_ErrorCode, variable & o_str_ErrorDescription ) void ;
  private function _GetErrorDescriptionSlaveError( variable i_str_ErrorCode, variable & o_str_ErrorDescription ) void ;
  function _GetSlaveError( variable i_str_ReturnValue, variable & o_arr_Channels[], variable & o_arr_SlaveErrors[], variable & o_arr_ErrorDescription[] ) void ;
  function _MoveRightArmXAbsolute( device & ML_STAR, variable i_flt_X_Position ) void ;
  function _MoveXAbsolute( device & ML_STAR, variable i_flt_X_Position ) void ;
  function _MoveYAbsolute( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_Y_Position ) void ;
  function _MoveZAbsolute( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_Z_Position ) void ;
  private function _Parse_Parameter_Multiple( variable i_str_ParameterFull, variable i_str_Parameter, variable i_flt_Conversion, variable i_int_TotalDigits, variable i_int_MaxValues, variable & o_bol_ParameterFound, variable & o_arr_flt_Value[] ) void ;
  private function _Parse_Parameter_Single( variable i_str_ParameterFull, variable i_str_Parameter, variable i_flt_Conversion, variable i_int_TotalDigits, variable & o_bol_ParameterFound, variable & o_flt_Value ) void ;
  private function __Parse_Parameter_Single_String( variable i_str_ParameterFull, variable i_str_Parameter, variable & o_bol_ParameterFound, variable & o_str_Value ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function Get_Channel_Position( device & ML_STAR, variable i_int_CurrentChannel, variable & o_X_Coord, variable & o_Y_Coord, variable & o_Z_Coord ) void {
    private variable str_FirmwareCMND;
    private variable bol_SimulationMode;
    private variable str_ReturnValue;
    private variable bol_ParameterFound;
    private variable flt_Resolution_X;
    private variable flt_Resolution_Y;
    private variable flt_Resolution_Z;
    private variable flt_ReturnValue;
    private variable str_FirmwarePARAM;
    private variable str_CurrentChannel;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    o_X_Coord = 0;
    o_Y_Coord = 0;
    o_Z_Coord = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    bol_SimulationMode = Util::GetSimulationMode();
    if(0){
      _GetChannelNumber(i_int_CurrentChannel);
    }
    flt_Resolution_Z = 0.1;
    flt_Resolution_Y = 0.1;
    flt_Resolution_X = 0.1;
    str_FirmwareCMND = StrConcat4(Translate("C0RD"), Translate(""), Translate(""), Translate(""));
    str_CurrentChannel = StrConcat2(i_int_CurrentChannel, Translate(""));
    str_CurrentChannel = StrFillLeft(str_CurrentChannel, Translate("0"), 2);
    str_FirmwarePARAM = StrConcat4(Translate("pn"), str_CurrentChannel, Translate(""), Translate(""));
    if(0){
      str_FirmwarePARAM = StrConcat4(Translate("pn"), i_int_CurrentChannel, Translate(""), Translate(""));
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _Parse_Parameter_Single(str_ReturnValue, Translate("rd"), flt_Resolution_Z, 4, bol_ParameterFound, flt_ReturnValue);
    if (bol_ParameterFound == 1)
    {
      o_Z_Coord = flt_ReturnValue;
    }
    _CheckForError(strFunctionName, str_ReturnValue, 1);
    str_FirmwareCMND = StrConcat4(Translate("C0RB"), Translate(""), Translate(""), Translate(""));
    if(0){
      str_FirmwarePARAM = StrConcat4(Translate("pn"), i_int_CurrentChannel, Translate(""), Translate(""));
    }
    str_CurrentChannel = StrConcat2(i_int_CurrentChannel, Translate(""));
    str_CurrentChannel = StrFillLeft(str_CurrentChannel, Translate("0"), 2);
    str_FirmwarePARAM = StrConcat4(Translate("pn"), str_CurrentChannel, Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _Parse_Parameter_Single(str_ReturnValue, Translate("rb"), flt_Resolution_Y, 4, bol_ParameterFound, flt_ReturnValue);
    if (bol_ParameterFound == 1)
    {
      o_Y_Coord = flt_ReturnValue;
    }
    _CheckForError(strFunctionName, str_ReturnValue, 1);
    str_FirmwareCMND = StrConcat4(Translate("C0"), Translate(""), Translate("RX"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _Parse_Parameter_Single(str_ReturnValue, Translate("rx"), flt_Resolution_X, 5, bol_ParameterFound, flt_ReturnValue);
    if (bol_ParameterFound == 1)
    {
      o_X_Coord = flt_ReturnValue;
    }
    _CheckForError(strFunctionName, str_ReturnValue, 1);
    Trace("   Current X Position:  ",o_X_Coord);
    Trace("   Current Y Position:  ",o_Y_Coord);
    Trace("   Current Z Position:  ",o_Z_Coord);
  }

  private function _Parse_Parameter_Single( variable i_str_ParameterFull, variable i_str_Parameter, variable i_flt_Conversion, variable i_int_TotalDigits, variable & o_bol_ParameterFound, variable & o_flt_Value ) void {
    private variable str_Value3;
    private variable int_Remaining;
    private variable str_RegionOfInterest;
    private variable int_ValueNumber;
    private variable int_LoopCount;
    private variable flt_Value2;
    private variable int_StringPosition;
    private variable int_ParamaterLength;
    private variable int_SecondCut;
    private variable int_Count;
    private variable int_Value2;
    private variable str_Value2;
    private variable str_Value;
    o_bol_ParameterFound = 0;
    o_flt_Value = 0;
    o_flt_Value = 0.0;
    o_bol_ParameterFound = StrReplace(i_str_ParameterFull, i_str_Parameter, i_str_Parameter);
    StrReplace(i_str_ParameterFull, Translate("+"), Translate(""));
    int_ParamaterLength = StrGetLength(i_str_ParameterFull);
    if (o_bol_ParameterFound == 1)
    {
      int_StringPosition = StrFind(i_str_ParameterFull, i_str_Parameter);
      int_StringPosition = int_StringPosition + 1;
      int_Remaining = int_ParamaterLength - int_StringPosition;
      str_RegionOfInterest = StrMid(i_str_ParameterFull, int_StringPosition, int_Remaining);
      int_ValueNumber = i_int_TotalDigits + 1;
      int_SecondCut = i_int_TotalDigits;
      int_Count = 1;
      {
        int_LoopCount = 0;
        while (1 == 1)
        {
          int_LoopCount = int_LoopCount + 1;
          str_Value = StrMid(str_RegionOfInterest, int_Count, int_ValueNumber);
          int_Count = int_Count + int_ValueNumber;
          str_Value2 = StrLeft(str_Value, int_SecondCut);
          int_Value2 = StrIVal(str_Value2);
          flt_Value2 = int_Value2 * i_flt_Conversion;
          o_flt_Value = flt_Value2;
          str_Value3 = StrRight(str_Value, 1);
          if (str_Value3 != " ")
          {
            break;
          }
        }
      }
    }
  }

  function Search_Z_Slow( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_Z_Min, variable i_flt_TipLength, variable i_int_Sensitivity, variable & o_flt_Z_Found ) variable {
    private variable Not_Used;
    private variable int_SeekHeight;
    private variable flt_SeekHeight;
    private variable str_FirmwareParam;
    private variable str_FirmwareCMND;
    private variable flt_Resolution_Z;
    private variable flt_ResetPosition;
    private variable str_Position;
    private variable flt_Z_MinPlusTip;
    private variable str_ReturnValue;
    private variable bool_ParamFound;
    private variable int_ErrorCode;
    private variable ret_WallFound;
    private variable int_CLLD_Status;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable int_Channel;
    o_flt_Z_Found = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    int_Channel = i_int_CurrentChannel;
    SwitchLLDMeasurement(ML_STAR, 1);
    _GetChannelNumber(int_Channel);
    flt_Resolution_Z = 0.01072765;
    ret_WallFound = 0;
    flt_Z_MinPlusTip = i_flt_Z_Min + i_flt_TipLength;
    str_FirmwareCMND = StrConcat4(Translate("P"), int_Channel, Translate("ZG"), Translate(""));
    flt_SeekHeight = flt_Z_MinPlusTip / (flt_Resolution_Z * 1.0);
    int_SeekHeight = MthCeiling(flt_SeekHeight);
    if (int_SeekHeight < 12584)
    {
      int_SeekHeight = 12584;
    }
    str_FirmwareParam = StrConcat4(Translate("za"), int_SeekHeight, Translate("zv00466zr005zw"), i_int_Sensitivity);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _Parse_Parameter_Single(str_ReturnValue, Translate("er"), 1, 2, bool_ParamFound, int_ErrorCode);
    if (int_ErrorCode != 0)
    {
      ret_WallFound = 1;
    }
    GetCLLDStatus(ML_STAR, int_Channel, int_CLLD_Status);
    Trace("CLLD Status:  ",int_CLLD_Status);
    _CheckForError(strFunctionName, str_ReturnValue, 0);
    if(0){
      Get_Channel_Position(ML_STAR, i_int_CurrentChannel, Not_Used, Not_Used, o_flt_Z_Found);
    }
    GetStopDiskZCoord(ML_STAR, int_Channel, o_flt_Z_Found);
    o_flt_Z_Found = o_flt_Z_Found - i_flt_TipLength;
    if(0){
      str_FirmwareCMND = StrConcat4(Translate("P"), i_int_CurrentChannel, Translate("ZA"), Translate(""));
      flt_ResetPosition = o_flt_Z_Found + i_flt_TipLength;
      flt_ResetPosition = flt_ResetPosition / (flt_Resolution_Z * 1.0);
      flt_ResetPosition = MthRound(flt_ResetPosition, 0);
      str_Position = StrConcat2(flt_ResetPosition, Translate(""));
      str_Position = StrFillLeft(str_Position, Translate("0"), 5);
      str_FirmwareParam = StrConcat8(Translate("zv12000"), Translate("zr075"), Translate("zw3"), Translate("za"), str_Position, Translate(""), Translate(""), Translate(""));
    }
    str_FirmwareCMND = StrConcat4(Translate("P"), Translate("X"), Translate("AA"), Translate(""));
    str_FirmwareParam = StrConcat8(Translate("zv12000"), Translate("zr075"), Translate("zw3"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _CheckForError(strFunctionName, str_ReturnValue, 0);
    SwitchLLDMeasurement(ML_STAR, 0);
    return (ret_WallFound);
  }

  function Move_Channel_To_Absolute_Position( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_X_Position, variable i_flt_Y_Position, variable i_flt_Z_Position ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _CheckForError(strFunctionName, str_ReturnValue, 1);
    _MoveYAbsolute(ML_STAR, i_int_CurrentChannel, i_flt_Y_Position);
    _MoveXAbsolute(ML_STAR, i_flt_X_Position);
    _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, i_flt_Z_Position);
  }

  function Move_Z_Relative( device & ML_STAR, variable i_int_CurrentChannel, variable i_int_MoveDirection, variable i_flt_RelativeDistance ) void {
    private variable NotUsed;
    private variable flt_Z_End;
    private variable flt_Z_Current;
    Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, NotUsed, flt_Z_Current);
    if (i_int_MoveDirection == 0)
    {
      flt_Z_End = flt_Z_Current + i_flt_RelativeDistance;
    }
    else
    {
      flt_Z_End = flt_Z_Current - i_flt_RelativeDistance;
    }
    _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_Z_End);
  }

  function Move_Y_Relative( device & ML_STAR, variable i_int_CurrentChannel, variable i_int_MoveDirection, variable i_flt_RelativeDistance ) void {
    private variable flt_Y_End;
    private variable NotUsed;
    private variable flt_Y_Current;
    Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Y_Current, NotUsed);
    if (i_int_MoveDirection == 0)
    {
      flt_Y_End = flt_Y_Current + i_flt_RelativeDistance;
    }
    else
    {
      flt_Y_End = flt_Y_Current - i_flt_RelativeDistance;
    }
    Trace("Y Current Position:  ",flt_Y_Current,"  Offset:  ",i_flt_RelativeDistance,"  Direction:  ",i_int_MoveDirection,"  End Position:  ",flt_Y_End);
    _MoveYAbsolute(ML_STAR, i_int_CurrentChannel, flt_Y_End);
  }

  function Move_X_Relative( device & ML_STAR, variable i_int_MoveDirection, variable i_flt_RelativeDistance ) void {
    private variable flt_X_Current;
    private variable flt_X_End;
    private variable NotUsed;
    Get_Channel_Position(ML_STAR, 1, flt_X_Current, NotUsed, NotUsed);
    if (i_int_MoveDirection == 0)
    {
      flt_X_End = flt_X_Current + i_flt_RelativeDistance;
    }
    else
    {
      flt_X_End = flt_X_Current - i_flt_RelativeDistance;
    }
    _MoveXAbsolute(ML_STAR, flt_X_End);
  }

  function Create_Maximum_Y_for_Channel( device & ML_STAR, variable i_int_CurrentChannel ) void {
    private variable str_FirmwarePARAM;
    private variable str_FirmwareCMND;
    private variable str_CurrentChannel;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_ReturnValue;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    str_FirmwareCMND = StrConcat4(Translate("C0JP"), Translate(""), Translate(""), Translate(""));
    _GetChannelNumber(i_int_CurrentChannel);
    str_CurrentChannel = StrConcat2(i_int_CurrentChannel, Translate(""));
    str_CurrentChannel = StrFillLeft(str_CurrentChannel, Translate("0"), 2);
    str_FirmwarePARAM = StrConcat4(Translate("pn"), str_CurrentChannel, Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _CheckForError(strFunctionName, str_ReturnValue, 1);
  }

  function _MoveXAbsolute( device & ML_STAR, variable i_flt_X_Position ) void {
    private variable str_ReturnValue;
    private variable flt_X_Position;
    private variable str_FirmwareParam;
    private variable str_FirmwareCMND;
    private variable flt_Resolution_X;
    private variable str_X_Position;
    flt_Resolution_X = 0.1;
    str_FirmwareCMND = StrConcat4(Translate("C0JX"), Translate(""), Translate(""), Translate(""));
    flt_X_Position = i_flt_X_Position / (flt_Resolution_X * 1.0);
    flt_X_Position = MthRound(flt_X_Position, 0);
    str_X_Position = StrConcat2(flt_X_Position, Translate(""));
    str_X_Position = StrFillLeft(str_X_Position, Translate("0"), 5);
    str_FirmwareParam = StrConcat4(Translate("xs"), str_X_Position, Translate(""), Translate(""));
    if(0){
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	str_ReturnValue = arrRetValues[3];
      }
    }
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
  }

  function _MoveYAbsolute( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_Y_Position ) void {
    private variable str_ReturnValue;
    private variable str_Y_Position;
    private variable flt_Y_Position;
    private variable str_FirmwareParam;
    private variable str_FirmwareCMND;
    private variable flt_Resolution_Y;
    private variable str_CurrentChannel;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    flt_Resolution_Y = 0.1;
    str_FirmwareCMND = StrConcat4(Translate("C0KY"), Translate(""), Translate(""), Translate(""));
    flt_Y_Position = i_flt_Y_Position / (flt_Resolution_Y * 1.0);
    flt_Y_Position = MthRound(flt_Y_Position, 0);
    str_Y_Position = StrConcat2(flt_Y_Position, Translate(""));
    str_Y_Position = StrFillLeft(str_Y_Position, Translate("0"), 4);
    str_CurrentChannel = StrConcat2(i_int_CurrentChannel, Translate(""));
    str_CurrentChannel = StrFillLeft(str_CurrentChannel, Translate("0"), 2);
    str_FirmwareParam = StrConcat4(Translate("yj"), str_Y_Position, Translate("pn"), str_CurrentChannel);
    Trace("Move parameters: ",str_FirmwareParam);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _CheckForError(strFunctionName, str_ReturnValue, 1);
  }

  function _MoveZAbsolute( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_Z_Position ) void {
    private variable flt_Resolution_Z;
    private variable str_ReturnValue;
    private variable str_Z_Position;
    private variable str_FirmwareParam;
    private variable str_FirmwareCMND;
    private variable flt_Z_Position;
    private variable str_CurrentChannel;
    private variable str_FirmwarePARAM;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    flt_Resolution_Z = 0.1;
    str_FirmwareCMND = StrConcat4(Translate("C0KZ"), Translate(""), Translate(""), Translate(""));
    flt_Z_Position = i_flt_Z_Position / (flt_Resolution_Z * 1.0);
    flt_Z_Position = MthRound(flt_Z_Position, 0);
    str_Z_Position = StrConcat2(flt_Z_Position, Translate(""));
    str_Z_Position = StrFillLeft(str_Z_Position, Translate("0"), 4);
    str_CurrentChannel = StrConcat2(i_int_CurrentChannel, Translate(""));
    str_CurrentChannel = StrFillLeft(str_CurrentChannel, Translate("0"), 2);
    str_FirmwareParam = StrConcat4(Translate("zj"), str_Z_Position, Translate("pn"), str_CurrentChannel);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _CheckForError(strFunctionName, str_ReturnValue, 1);
    if(0){
      flt_Resolution_Z = 0.01072765;
      str_FirmwareCMND = StrConcat4(Translate("P"), i_int_CurrentChannel, Translate("ZA"), Translate(""));
      flt_Z_Position = i_flt_Z_Position / (flt_Resolution_Z * 1.0);
      flt_Z_Position = MthRound(flt_Z_Position, 0);
      str_Z_Position = StrConcat2(flt_Z_Position, Translate(""));
      str_Z_Position = StrFillLeft(str_Z_Position, Translate("0"), 5);
      str_FirmwarePARAM = StrConcat4(Translate("zv12000zr075zw3"), Translate(""), Translate("za"), str_Z_Position);
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	str_ReturnValue = arrRetValues[3];
      }
    }
  }

  function Reset_Search_Z( device & ML_STAR ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _CheckForError(strFunctionName, str_ReturnValue, 0);
  }

  function Search_Z( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_Z_Min, variable i_flt_TipLength, variable i_int_Sensitivity, variable & o_flt_Z_Found ) variable {
    private variable int_SeekHeight;
    private variable flt_SeekHeight;
    private variable str_FirmwareParam;
    private variable flt_Z_MinPlusTip;
    private variable str_FirmwareCMND;
    private variable flt_ResetPosition;
    private variable flt_Resolution_Z;
    private variable str_Position;
    private variable Not_Used;
    private variable ret_WallFound;
    private variable str_ReturnValue;
    private variable bool_ParamFound;
    private variable int_ErrorCode;
    private variable int_CLLD_Status;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable int_Channel;
    o_flt_Z_Found = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    int_Channel = i_int_CurrentChannel;
    SwitchLLDMeasurement(ML_STAR, 1);
    _GetChannelNumber(int_Channel);
    flt_Resolution_Z = 0.01072765;
    ret_WallFound = 0;
    flt_Z_MinPlusTip = i_flt_Z_Min + i_flt_TipLength;
    str_FirmwareCMND = StrConcat4(Translate("P"), int_Channel, Translate("ZG"), Translate(""));
    flt_SeekHeight = flt_Z_MinPlusTip / (flt_Resolution_Z * 1.0);
    int_SeekHeight = MthCeiling(flt_SeekHeight);
    if (int_SeekHeight < 12584)
    {
      int_SeekHeight = 12584;
    }
    str_FirmwareParam = StrConcat4(Translate("za"), int_SeekHeight, Translate("zv01500zr005zw"), i_int_Sensitivity);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _Parse_Parameter_Single(str_ReturnValue, Translate("er"), 1, 2, bool_ParamFound, int_ErrorCode);
    if (int_ErrorCode != 0)
    {
      ret_WallFound = 1;
    }
    _CheckForError(strFunctionName, str_ReturnValue, 0);
    if(0){
      Get_Channel_Position(ML_STAR, i_int_CurrentChannel, Not_Used, Not_Used, o_flt_Z_Found);
    }
    GetStopDiskZCoord(ML_STAR, int_Channel, o_flt_Z_Found);
    o_flt_Z_Found = o_flt_Z_Found - i_flt_TipLength;
    GetCLLDStatus(ML_STAR, i_int_CurrentChannel, int_CLLD_Status);
    Trace("CLLD Status:  ",int_CLLD_Status);
    if(0){
      str_FirmwareCMND = StrConcat4(Translate("P"), i_int_CurrentChannel, Translate("ZA"), Translate(""));
      flt_ResetPosition = o_flt_Z_Found + i_flt_TipLength;
      flt_ResetPosition = flt_ResetPosition / (flt_Resolution_Z * 1.0);
      flt_ResetPosition = MthRound(flt_ResetPosition, 0);
      str_Position = StrConcat2(flt_ResetPosition, Translate(""));
      str_Position = StrFillLeft(str_Position, Translate("0"), 5);
      str_FirmwareParam = StrConcat8(Translate("zv12000"), Translate("zr075"), Translate("zw3"), Translate("za"), str_Position, Translate(""), Translate(""), Translate(""));
    }
    str_FirmwareCMND = StrConcat4(Translate("P"), Translate("X"), Translate("AA"), Translate(""));
    str_FirmwareParam = StrConcat8(Translate("zv12000"), Translate("zr075"), Translate("zw3"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _CheckForError(strFunctionName, str_ReturnValue, 0);
    SwitchLLDMeasurement(ML_STAR, 0);
    return (ret_WallFound);
  }

  function Find_Well_Center( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_MinSearchZ, variable i_flt_TipLength, variable i_flt_SafeHeight, variable & o_flt_X_Center, variable & o_flt_Y_Center, variable & o_flt_ContainerZMax ) void {
    private variable flt_Position_XRight;
    private variable flt_InitialSearchIncrement;
    private variable NotUsed;
    private variable bol_WellEdgeFound;
    private variable flt_Y_Center;
    private variable str_ErrDescription;
    private variable flt_TeachingNeedleWidth;
    private variable int_SearchSensitivity;
    private variable flt_TeachingNeedleWidth_X;
    private variable flt_TeachingNeedleWidth_Half_X;
    private variable flt_DistanceTraveled;
    private variable flt_FineTuneIncrement;
    private variable flt_TeachingNeedleWidth_Half_Y;
    private variable flt_TeachingNeedleWidth_Y;
    private variable flt_Position_XLeft;
    private variable flt_Position_YBack;
    private variable int_SearchSensitivity2;
    private variable flt_MaximumSearchDistance;
    private variable flt_Position_YFront;
    private variable flt_ZMinimum;
    private variable int_ErrID;
    private variable flt_WellWidth_X;
    private variable int_TryCount;
    private variable flt_ZStart;
    private variable flt_Z_Found;
    private variable flt_WellWidth_Y;
    private variable flt_ZFlag;
    private variable flt_X_Center;
    private variable flt_FineTuneIncrement2;
    private variable flt_InitialSearchIncrement2;
    private variable flt_ZMinimumAdjust;
    o_flt_X_Center = 0;
    o_flt_Y_Center = 0;
    o_flt_ContainerZMax = 0;
    o_flt_ContainerZMax = 0.0;
    o_flt_X_Center = 0.0;
    o_flt_Y_Center = 0.0;
    flt_ZMinimumAdjust = 2.0;
    flt_ZMinimum = i_flt_MinSearchZ - flt_ZMinimumAdjust;
    flt_ZMinimum = MthRound(flt_ZMinimum, 1);
    flt_ZFlag = flt_ZMinimum + 0.2;
    flt_MaximumSearchDistance = 25.0;
    flt_InitialSearchIncrement = 1.2;
    flt_InitialSearchIncrement2 = 1.2;
    flt_FineTuneIncrement = 0.6;
    flt_FineTuneIncrement2 = 0.3;
    flt_ZStart = i_flt_SafeHeight;
    int_SearchSensitivity = 1;
    int_SearchSensitivity2 = 1;
    flt_TeachingNeedleWidth = 0.6;
    flt_TeachingNeedleWidth_Half_X = 0.0;
    flt_TeachingNeedleWidth_Half_Y = 0.0;
    if(0){
      flt_TeachingNeedleWidth_X = 0.7;
      flt_TeachingNeedleWidth_Y = 0.6;
      flt_TeachingNeedleWidth_Half_X = flt_TeachingNeedleWidth_X / (2 * 1.0);
      flt_TeachingNeedleWidth_Half_Y = flt_TeachingNeedleWidth_Y / (2 * 1.0);
    }
    _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
    {
      int_TryCount = 0;
      while (1 == 1)
      {
        int_TryCount = int_TryCount + 1;
        onerror goto errLabel_1 ;
        err.Clear();
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_YBack = 0.0;
        MECC::TraceComment(Translate("Search + Y"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              flt_ZMinimum = flt_Z_Found - flt_ZMinimumAdjust;
              flt_ZMinimum = MthRound(flt_ZMinimum, 1);
              flt_ZFlag = flt_ZMinimum + 0.2;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YBack, NotUsed);
                  Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_FineTuneIncrement);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    Trace("     ","Edge found!  Y Coord:  ",flt_Position_YBack);
                  }
                }
              }
            }
            else
            {
              Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_InitialSearchIncrement);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_DistanceTraveled);
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_YFront = 0.0;
        MECC::TraceComment(Translate("Search - Y"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YFront, NotUsed);
                  Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_FineTuneIncrement);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    Trace("     ","Edge found!  Y Coord:  ",flt_Position_YFront);
                  }
                }
              }
            }
            else
            {
              Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_InitialSearchIncrement);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        flt_Y_Center = flt_Position_YBack + flt_Position_YFront;
        flt_Y_Center = flt_Y_Center / (2 * 1.0);
        flt_Y_Center = MthRound(flt_Y_Center, 2);
        Trace("Initial Y Center Found:  ",flt_Y_Center);
        _MoveYAbsolute(ML_STAR, i_int_CurrentChannel, flt_Y_Center);
        break;
        errLabel_1 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          flt_InitialSearchIncrement = 0.5;
        }   /* end if from skip handler if no error */
        int_ErrID = ErrGetId();
        str_ErrDescription = ErrGetDescription();
        if (int_ErrID != 101)
        {
          ErrRaise(int_ErrID, str_ErrDescription);
        }
        if (int_TryCount == 2)
        {
          ErrRaise(101, Translate("CONTAINER CANNOT BE FOUND"));
        }
      }
    }
    {
      int_TryCount = 0;
      while (1 == 1)
      {
        int_TryCount = int_TryCount + 1;
        onerror goto errLabel_2 ;
        err.Clear();
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_XRight = 0.0;
        MECC::TraceComment(Translate("Search + X"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, flt_Position_XRight, NotUsed, NotUsed);
                  Move_X_Relative(ML_STAR, 1, flt_FineTuneIncrement);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_XRight = flt_Position_XRight + flt_TeachingNeedleWidth_Half_X;
                    Trace("Edge found!  X Coord:  ",flt_Position_XRight);
                  }
                }
              }
            }
            else
            {
              Move_X_Relative(ML_STAR, 0, flt_InitialSearchIncrement);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              Trace("     ","Edge Not Found! X Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        Move_X_Relative(ML_STAR, 1, flt_DistanceTraveled);
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_XLeft = 0.0;
        MECC::TraceComment(Translate("Search - X"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, flt_Position_XLeft, NotUsed, NotUsed);
                  Move_X_Relative(ML_STAR, 0, flt_FineTuneIncrement);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_XLeft = flt_Position_XLeft - flt_TeachingNeedleWidth_Half_X;
                    Trace("      ","Edge found!  X Coord:  ",flt_Position_XLeft);
                  }
                }
              }
            }
            else
            {
              Move_X_Relative(ML_STAR, 1, flt_InitialSearchIncrement);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              Trace("     ","Edge Not Found! X Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        flt_X_Center = flt_Position_XLeft + flt_Position_XRight;
        flt_X_Center = flt_X_Center / (2 * 1.0);
        flt_X_Center = MthRound(flt_X_Center, 2);
        Trace("X Center Found:  ",flt_X_Center);
        _MoveXAbsolute(ML_STAR, flt_X_Center);
        break;
        errLabel_2 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          flt_InitialSearchIncrement = 0.5;
        }   /* end if from skip handler if no error */
        int_ErrID = ErrGetId();
        str_ErrDescription = ErrGetDescription();
        if (int_ErrID != 101)
        {
          ErrRaise(int_ErrID, str_ErrDescription);
        }
        if (int_TryCount == 2)
        {
          ErrRaise(101, Translate("CONTAINER CANNOT BE FOUND"));
        }
      }
    }
    {
      int_TryCount = 0;
      while (1 == 1)
      {
        int_TryCount = int_TryCount + 1;
        onerror goto errLabel_3 ;
        err.Clear();
        if(0){
          bol_WellEdgeFound = 0;
          flt_DistanceTraveled = 0.0;
          flt_Position_YBack = 0.0;
          MECC::TraceComment(Translate("Search + Y"));
          {
            while (bol_WellEdgeFound == 0)
            {
              if (flt_DistanceTraveled > flt_MaximumSearchDistance)
              {
                ErrRaise(101, Translate("Well wall was not found!"));
              }
              Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, 1, flt_Z_Found);
              _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
              if (flt_Z_Found > flt_ZMinimum)
              {
                flt_ZStart = flt_Z_Found + 5.0;
                o_flt_ContainerZMax = flt_Z_Found;
                {
                  while (bol_WellEdgeFound == 0)
                  {
                    Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YBack, NotUsed);
                    Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_FineTuneIncrement);
                    Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, 1, flt_Z_Found);
                    _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                    if (flt_Z_Found <= flt_ZMinimum)
                    {
                      bol_WellEdgeFound = 1;
                      Trace("Edge found!  Y Coord:  ",flt_Position_YBack);
                    }
                  }
                }
              }
              else
              {
                Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_InitialSearchIncrement);
                flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              }
            }
          }
          Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_DistanceTraveled);
          bol_WellEdgeFound = 0;
          flt_DistanceTraveled = 0.0;
          flt_Position_YFront = 0.0;
          MECC::TraceComment(Translate("Search - Y"));
          {
            while (bol_WellEdgeFound == 0)
            {
              if (flt_DistanceTraveled > flt_MaximumSearchDistance)
              {
              }
              Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, 1, flt_Z_Found);
              _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
              if (flt_Z_Found > flt_ZMinimum)
              {
                flt_ZStart = flt_Z_Found + 5.0;
                o_flt_ContainerZMax = flt_Z_Found;
                {
                  while (bol_WellEdgeFound == 0)
                  {
                    Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YFront, NotUsed);
                    Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_FineTuneIncrement);
                    Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, 1, flt_Z_Found);
                    _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                    if (flt_Z_Found <= flt_ZMinimum)
                    {
                      bol_WellEdgeFound = 1;
                      Trace("Edge found!  Y Coord:  ",flt_Position_YFront);
                    }
                  }
                }
              }
              else
              {
                Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_InitialSearchIncrement);
                flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              }
            }
          }
          flt_Y_Center = flt_Position_YBack + flt_Position_YFront;
          flt_Y_Center = flt_Y_Center / (2 * 1.0);
          flt_Y_Center = MthRound(flt_Y_Center, 1);
          Trace("Y Center Found:  ",flt_Y_Center);
          _MoveYAbsolute(ML_STAR, i_int_CurrentChannel, flt_Y_Center);
        }
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_YBack = 0.0;
        MECC::TraceComment(Translate("Search + Y"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YBack, NotUsed);
                  Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_FineTuneIncrement2);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_YBack = flt_Position_YBack + flt_TeachingNeedleWidth_Half_Y;
                    Trace("     ","Edge found!  Y Coord:  ",flt_Position_YBack);
                  }
                }
              }
            }
            else
            {
              Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_InitialSearchIncrement2);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement2;
              Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_DistanceTraveled);
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_YFront = 0.0;
        MECC::TraceComment(Translate("Search - Y"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YFront, NotUsed);
                  Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_FineTuneIncrement2);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_YFront = flt_Position_YFront - flt_TeachingNeedleWidth_Half_Y;
                    Trace("     ","Edge found!  Y Coord:  ",flt_Position_YFront);
                  }
                }
              }
            }
            else
            {
              Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_InitialSearchIncrement2);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement2;
              Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        flt_Y_Center = flt_Position_YBack + flt_Position_YFront;
        flt_Y_Center = flt_Y_Center / (2 * 1.0);
        flt_Y_Center = MthRound(flt_Y_Center, 2);
        Trace("Initial Y Center Found:  ",flt_Y_Center);
        _MoveYAbsolute(ML_STAR, i_int_CurrentChannel, flt_Y_Center);
        break;
        errLabel_3 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          flt_InitialSearchIncrement = 0.5;
        }   /* end if from skip handler if no error */
        int_ErrID = ErrGetId();
        str_ErrDescription = ErrGetDescription();
        if (int_ErrID != 101)
        {
          ErrRaise(int_ErrID, str_ErrDescription);
        }
        if (int_TryCount == 2)
        {
          ErrRaise(101, Translate("CONTAINER CANNOT BE FOUND"));
        }
      }
    }
    {
      int_TryCount = 0;
      while (1 == 1)
      {
        int_TryCount = int_TryCount + 1;
        onerror goto errLabel_4 ;
        err.Clear();
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_XRight = 0.0;
        MECC::TraceComment(Translate("Search + X"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, flt_Position_XRight, NotUsed, NotUsed);
                  Move_X_Relative(ML_STAR, 1, flt_FineTuneIncrement2);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_XRight = flt_Position_XRight + flt_TeachingNeedleWidth_Half_X;
                    Trace("Edge found!  X Coord:  ",flt_Position_XRight);
                  }
                }
              }
            }
            else
            {
              Move_X_Relative(ML_STAR, 0, flt_InitialSearchIncrement2);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement2;
              Trace("     ","Edge Not Found! X Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        Move_X_Relative(ML_STAR, 1, flt_DistanceTraveled);
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_XLeft = 0.0;
        MECC::TraceComment(Translate("Search - X"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, flt_Position_XLeft, NotUsed, NotUsed);
                  Move_X_Relative(ML_STAR, 0, flt_FineTuneIncrement2);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_XLeft = flt_Position_XLeft - flt_TeachingNeedleWidth_Half_X;
                    Trace("      ","Edge found!  X Coord:  ",flt_Position_XLeft);
                  }
                }
              }
            }
            else
            {
              Move_X_Relative(ML_STAR, 1, flt_InitialSearchIncrement2);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement2;
              Trace("     ","Edge Not Found! X Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        flt_X_Center = flt_Position_XLeft + flt_Position_XRight;
        flt_X_Center = flt_X_Center / (2 * 1.0);
        flt_X_Center = MthRound(flt_X_Center, 2);
        Trace("X Center Found:  ",flt_X_Center);
        _MoveXAbsolute(ML_STAR, flt_X_Center);
        break;
        errLabel_4 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          flt_InitialSearchIncrement = 0.5;
        }   /* end if from skip handler if no error */
        int_ErrID = ErrGetId();
        str_ErrDescription = ErrGetDescription();
        if (int_ErrID != 101)
        {
          ErrRaise(int_ErrID, str_ErrDescription);
        }
        if (int_TryCount == 2)
        {
          ErrRaise(101, Translate("CONTAINER CANNOT BE FOUND"));
        }
      }
    }
    flt_WellWidth_X = flt_Position_XRight - flt_Position_XLeft;
    flt_WellWidth_Y = flt_Position_YBack - flt_Position_YFront;
    flt_WellWidth_X = flt_WellWidth_X + 0.5;
    flt_WellWidth_Y = flt_WellWidth_Y + 0.5;
    flt_WellWidth_X = MthRound(flt_WellWidth_X, 1);
    flt_WellWidth_Y = MthRound(flt_WellWidth_Y, 1);
    o_flt_X_Center = flt_X_Center;
    o_flt_Y_Center = flt_Y_Center;
    Trace("--------------------------------------------");
    Trace("");
    Trace("     ","Well width X found:  ",flt_WellWidth_X," mm");
    Trace("     ","Well width Y found:  ",flt_WellWidth_Y," mm");
    Trace("     ","X Center Found:  ",o_flt_X_Center);
    Trace("     ","Y Center Found:  ",o_flt_Y_Center);
    Trace("     ","Container Z Max Found:  ",o_flt_ContainerZMax);
    Trace("");
    Trace("--------------------------------------------");
  }

  function Measure_Well_Center( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_MinSearchZ, variable i_flt_TipLength, variable i_flt_SafeHeight, variable & o_flt_X_Center, variable & o_flt_Y_Center, variable & o_flt_X_Width, variable & o_flt_Y_Width, variable & o_flt_ContainerZMax ) void {
    private variable flt_Position_XRight;
    private variable flt_InitialSearchIncrement;
    private variable NotUsed;
    private variable bol_WellEdgeFound;
    private variable flt_Y_Center;
    private variable flt_FineTuneIncrement2;
    private variable flt_InitialSearchIncrement2;
    private variable str_ErrDescription;
    private variable flt_TeachingNeedleWidth;
    private variable int_SearchSensitivity;
    private variable flt_FineTuneIncrement;
    private variable flt_TeachingNeedleWidth_X;
    private variable flt_TeachingNeedleWidth_Half_X;
    private variable flt_DistanceTraveled;
    private variable flt_TeachingNeedleWidth_Half_Y;
    private variable flt_TeachingNeedleWidth_Y;
    private variable flt_Position_XLeft;
    private variable int_SearchSensitivity2;
    private variable flt_Position_YBack;
    private variable flt_ZMinimum;
    private variable flt_MaximumSearchDistance;
    private variable flt_Position_YFront;
    private variable flt_WellWidth_X;
    private variable int_TryCount;
    private variable int_ErrID;
    private variable flt_Z_Found;
    private variable flt_ZStart;
    private variable flt_X_Center;
    private variable flt_ZFlag;
    private variable flt_WellWidth_Y;
    o_flt_X_Center = 0;
    o_flt_Y_Center = 0;
    o_flt_X_Width = 0;
    o_flt_Y_Width = 0;
    o_flt_ContainerZMax = 0;
    o_flt_ContainerZMax = 0.0;
    o_flt_X_Center = 0.0;
    o_flt_Y_Center = 0.0;
    flt_ZMinimum = i_flt_MinSearchZ - 1.0;
    flt_ZMinimum = MthRound(flt_ZMinimum, 1);
    flt_ZFlag = flt_ZMinimum + 0.2;
    flt_MaximumSearchDistance = 25.0;
    flt_InitialSearchIncrement = 2.0;
    flt_InitialSearchIncrement2 = 1.2;
    flt_FineTuneIncrement = 0.6;
    flt_FineTuneIncrement2 = 0.3;
    flt_ZStart = i_flt_SafeHeight;
    int_SearchSensitivity = 1;
    int_SearchSensitivity2 = 1;
    flt_TeachingNeedleWidth = 0.6;
    flt_TeachingNeedleWidth_Half_X = 0.0;
    flt_TeachingNeedleWidth_Half_Y = 0.0;
    if(0){
      flt_TeachingNeedleWidth_X = 0.7;
      flt_TeachingNeedleWidth_Y = 0.6;
      flt_TeachingNeedleWidth_Half_X = flt_TeachingNeedleWidth_X / (2 * 1.0);
      flt_TeachingNeedleWidth_Half_Y = flt_TeachingNeedleWidth_Y / (2 * 1.0);
    }
    _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
    {
      int_TryCount = 0;
      while (1 == 1)
      {
        int_TryCount = int_TryCount + 1;
        onerror goto errLabel_5 ;
        err.Clear();
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_YBack = 0.0;
        MECC::TraceComment(Translate("Search + Y"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              flt_ZMinimum = flt_Z_Found - 1.0;
              flt_ZMinimum = MthRound(flt_ZMinimum, 1);
              flt_ZFlag = flt_ZMinimum + 0.2;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YBack, NotUsed);
                  Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_FineTuneIncrement);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    Trace("     ","Edge found!  Y Coord:  ",flt_Position_YBack);
                  }
                }
              }
            }
            else
            {
              Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_InitialSearchIncrement);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_DistanceTraveled);
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_YFront = 0.0;
        MECC::TraceComment(Translate("Search - Y"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YFront, NotUsed);
                  Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_FineTuneIncrement);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    Trace("     ","Edge found!  Y Coord:  ",flt_Position_YFront);
                  }
                }
              }
            }
            else
            {
              Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_InitialSearchIncrement);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        flt_Y_Center = flt_Position_YBack + flt_Position_YFront;
        flt_Y_Center = flt_Y_Center / (2 * 1.0);
        flt_Y_Center = MthRound(flt_Y_Center, 2);
        Trace("Initial Y Center Found:  ",flt_Y_Center);
        _MoveYAbsolute(ML_STAR, i_int_CurrentChannel, flt_Y_Center);
        break;
        errLabel_5 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          flt_InitialSearchIncrement = 0.5;
        }   /* end if from skip handler if no error */
        int_ErrID = ErrGetId();
        str_ErrDescription = ErrGetDescription();
        if (int_ErrID != 101)
        {
          ErrRaise(int_ErrID, str_ErrDescription);
        }
        if (int_TryCount == 2)
        {
          ErrRaise(101, Translate("CONTAINER CANNOT BE FOUND"));
        }
      }
    }
    {
      int_TryCount = 0;
      while (1 == 1)
      {
        int_TryCount = int_TryCount + 1;
        onerror goto errLabel_6 ;
        err.Clear();
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_XRight = 0.0;
        MECC::TraceComment(Translate("Search + X"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, flt_Position_XRight, NotUsed, NotUsed);
                  Move_X_Relative(ML_STAR, 1, flt_FineTuneIncrement);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_XRight = flt_Position_XRight + flt_TeachingNeedleWidth_Half_X;
                    Trace("Edge found!  X Coord:  ",flt_Position_XRight);
                  }
                }
              }
            }
            else
            {
              Move_X_Relative(ML_STAR, 0, flt_InitialSearchIncrement);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              Trace("     ","Edge Not Found! X Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        Move_X_Relative(ML_STAR, 1, flt_DistanceTraveled);
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_XLeft = 0.0;
        MECC::TraceComment(Translate("Search - X"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, flt_Position_XLeft, NotUsed, NotUsed);
                  Move_X_Relative(ML_STAR, 0, flt_FineTuneIncrement);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_XLeft = flt_Position_XLeft - flt_TeachingNeedleWidth_Half_X;
                    Trace("      ","Edge found!  X Coord:  ",flt_Position_XLeft);
                  }
                }
              }
            }
            else
            {
              Move_X_Relative(ML_STAR, 1, flt_InitialSearchIncrement);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              Trace("     ","Edge Not Found! X Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        flt_X_Center = flt_Position_XLeft + flt_Position_XRight;
        flt_X_Center = flt_X_Center / (2 * 1.0);
        flt_X_Center = MthRound(flt_X_Center, 2);
        Trace("X Center Found:  ",flt_X_Center);
        _MoveXAbsolute(ML_STAR, flt_X_Center);
        break;
        errLabel_6 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          flt_InitialSearchIncrement = 0.5;
        }   /* end if from skip handler if no error */
        int_ErrID = ErrGetId();
        str_ErrDescription = ErrGetDescription();
        if (int_ErrID != 101)
        {
          ErrRaise(int_ErrID, str_ErrDescription);
        }
        if (int_TryCount == 2)
        {
          ErrRaise(101, Translate("CONTAINER CANNOT BE FOUND"));
        }
      }
    }
    {
      int_TryCount = 0;
      while (1 == 1)
      {
        int_TryCount = int_TryCount + 1;
        onerror goto errLabel_7 ;
        err.Clear();
        if(0){
          bol_WellEdgeFound = 0;
          flt_DistanceTraveled = 0.0;
          flt_Position_YBack = 0.0;
          MECC::TraceComment(Translate("Search + Y"));
          {
            while (bol_WellEdgeFound == 0)
            {
              if (flt_DistanceTraveled > flt_MaximumSearchDistance)
              {
                ErrRaise(101, Translate("Well wall was not found!"));
              }
              Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, 1, flt_Z_Found);
              _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
              if (flt_Z_Found > flt_ZMinimum)
              {
                flt_ZStart = flt_Z_Found + 5.0;
                o_flt_ContainerZMax = flt_Z_Found;
                {
                  while (bol_WellEdgeFound == 0)
                  {
                    Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YBack, NotUsed);
                    Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_FineTuneIncrement);
                    Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, 1, flt_Z_Found);
                    _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                    if (flt_Z_Found <= flt_ZMinimum)
                    {
                      bol_WellEdgeFound = 1;
                      Trace("Edge found!  Y Coord:  ",flt_Position_YBack);
                    }
                  }
                }
              }
              else
              {
                Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_InitialSearchIncrement);
                flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              }
            }
          }
          Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_DistanceTraveled);
          bol_WellEdgeFound = 0;
          flt_DistanceTraveled = 0.0;
          flt_Position_YFront = 0.0;
          MECC::TraceComment(Translate("Search - Y"));
          {
            while (bol_WellEdgeFound == 0)
            {
              if (flt_DistanceTraveled > flt_MaximumSearchDistance)
              {
              }
              Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, 1, flt_Z_Found);
              _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
              if (flt_Z_Found > flt_ZMinimum)
              {
                flt_ZStart = flt_Z_Found + 5.0;
                o_flt_ContainerZMax = flt_Z_Found;
                {
                  while (bol_WellEdgeFound == 0)
                  {
                    Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YFront, NotUsed);
                    Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_FineTuneIncrement);
                    Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, 1, flt_Z_Found);
                    _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                    if (flt_Z_Found <= flt_ZMinimum)
                    {
                      bol_WellEdgeFound = 1;
                      Trace("Edge found!  Y Coord:  ",flt_Position_YFront);
                    }
                  }
                }
              }
              else
              {
                Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_InitialSearchIncrement);
                flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              }
            }
          }
          flt_Y_Center = flt_Position_YBack + flt_Position_YFront;
          flt_Y_Center = flt_Y_Center / (2 * 1.0);
          flt_Y_Center = MthRound(flt_Y_Center, 1);
          Trace("Y Center Found:  ",flt_Y_Center);
          _MoveYAbsolute(ML_STAR, i_int_CurrentChannel, flt_Y_Center);
        }
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_YBack = 0.0;
        MECC::TraceComment(Translate("Search + Y"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YBack, NotUsed);
                  Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_FineTuneIncrement2);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_YBack = flt_Position_YBack + flt_TeachingNeedleWidth_Half_Y;
                    Trace("     ","Edge found!  Y Coord:  ",flt_Position_YBack);
                  }
                }
              }
            }
            else
            {
              Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_InitialSearchIncrement2);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement2;
              Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_DistanceTraveled);
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_YFront = 0.0;
        MECC::TraceComment(Translate("Search - Y"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YFront, NotUsed);
                  Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_FineTuneIncrement2);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_YFront = flt_Position_YFront - flt_TeachingNeedleWidth_Half_Y;
                    Trace("     ","Edge found!  Y Coord:  ",flt_Position_YFront);
                  }
                }
              }
            }
            else
            {
              Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_InitialSearchIncrement2);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement2;
              Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        flt_Y_Center = flt_Position_YBack + flt_Position_YFront;
        flt_Y_Center = flt_Y_Center / (2 * 1.0);
        flt_Y_Center = MthRound(flt_Y_Center, 2);
        Trace("Initial Y Center Found:  ",flt_Y_Center);
        _MoveYAbsolute(ML_STAR, i_int_CurrentChannel, flt_Y_Center);
        break;
        errLabel_7 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          flt_InitialSearchIncrement = 0.5;
        }   /* end if from skip handler if no error */
        int_ErrID = ErrGetId();
        str_ErrDescription = ErrGetDescription();
        if (int_ErrID != 101)
        {
          ErrRaise(int_ErrID, str_ErrDescription);
        }
        if (int_TryCount == 2)
        {
          ErrRaise(101, Translate("CONTAINER CANNOT BE FOUND"));
        }
      }
    }
    {
      int_TryCount = 0;
      while (1 == 1)
      {
        int_TryCount = int_TryCount + 1;
        onerror goto errLabel_8 ;
        err.Clear();
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_XRight = 0.0;
        MECC::TraceComment(Translate("Search + X"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, flt_Position_XRight, NotUsed, NotUsed);
                  Move_X_Relative(ML_STAR, 1, flt_FineTuneIncrement2);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_XRight = flt_Position_XRight + flt_TeachingNeedleWidth_Half_X;
                    Trace("Edge found!  X Coord:  ",flt_Position_XRight);
                  }
                }
              }
            }
            else
            {
              Move_X_Relative(ML_STAR, 0, flt_InitialSearchIncrement2);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement2;
              Trace("     ","Edge Not Found! X Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        Move_X_Relative(ML_STAR, 1, flt_DistanceTraveled);
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_XLeft = 0.0;
        MECC::TraceComment(Translate("Search - X"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, flt_Position_XLeft, NotUsed, NotUsed);
                  Move_X_Relative(ML_STAR, 0, flt_FineTuneIncrement2);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_XLeft = flt_Position_XLeft - flt_TeachingNeedleWidth_Half_X;
                    Trace("      ","Edge found!  X Coord:  ",flt_Position_XLeft);
                  }
                }
              }
            }
            else
            {
              Move_X_Relative(ML_STAR, 1, flt_InitialSearchIncrement2);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement2;
              Trace("     ","Edge Not Found! X Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        flt_X_Center = flt_Position_XLeft + flt_Position_XRight;
        flt_X_Center = flt_X_Center / (2 * 1.0);
        flt_X_Center = MthRound(flt_X_Center, 2);
        Trace("X Center Found:  ",flt_X_Center);
        _MoveXAbsolute(ML_STAR, flt_X_Center);
        break;
        errLabel_8 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          flt_InitialSearchIncrement = 0.5;
        }   /* end if from skip handler if no error */
        int_ErrID = ErrGetId();
        str_ErrDescription = ErrGetDescription();
        if (int_ErrID != 101)
        {
          ErrRaise(int_ErrID, str_ErrDescription);
        }
        if (int_TryCount == 2)
        {
          ErrRaise(101, Translate("CONTAINER CANNOT BE FOUND"));
        }
      }
    }
    flt_WellWidth_X = flt_Position_XRight - flt_Position_XLeft;
    flt_WellWidth_Y = flt_Position_YBack - flt_Position_YFront;
    flt_WellWidth_X = flt_WellWidth_X + 0.5;
    flt_WellWidth_Y = flt_WellWidth_Y + 0.5;
    o_flt_X_Width = MthRound(flt_WellWidth_X, 1);
    o_flt_Y_Width = MthRound(flt_WellWidth_Y, 1);
    o_flt_X_Center = flt_X_Center;
    o_flt_Y_Center = flt_Y_Center;
    Trace("--------------------------------------------");
    Trace("");
    Trace("     ","Well width X found:  ",o_flt_X_Width," mm");
    Trace("     ","Well width Y found:  ",o_flt_Y_Width," mm");
    Trace("     ","X Center Found:  ",o_flt_X_Center);
    Trace("     ","Y Center Found:  ",o_flt_Y_Center);
    Trace("     ","Container Z Max Found:  ",o_flt_ContainerZMax);
    Trace("");
    Trace("--------------------------------------------");
  }

  function Find_Well_Center_2( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_MinSearchZ, variable i_flt_TipLength, variable i_flt_SafeHeight, variable i_flt_WellWidth, variable & o_flt_X_Center, variable & o_flt_Y_Center, variable & o_flt_ContainerZMax ) void {
    private variable flt_Position_XRight;
    private variable flt_InitialSearchIncrement;
    private variable NotUsed;
    private variable flt_ZMinimumAdjust;
    private variable bol_WellEdgeFound;
    private variable flt_Y_Center;
    private variable flt_FineTuneIncrement2;
    private variable flt_InitialSearchIncrement2;
    private variable str_ErrDescription;
    private variable flt_TeachingNeedleWidth;
    private variable int_SearchSensitivity;
    private variable flt_TeachingNeedleWidth_X;
    private variable flt_TeachingNeedleWidth_Half_X;
    private variable flt_FineTuneIncrement;
    private variable flt_DistanceTraveled;
    private variable flt_TeachingNeedleWidth_Y;
    private variable flt_TeachingNeedleWidth_Half_Y;
    private variable flt_Position_XLeft;
    private variable int_SearchSensitivity2;
    private variable flt_Position_YBack;
    private variable flt_MaximumSearchDistance;
    private variable flt_ZMinimum;
    private variable flt_Position_YFront;
    private variable int_TryCount;
    private variable int_ErrID;
    private variable flt_WellWidth_X;
    private variable flt_ZStart;
    private variable flt_Z_Found;
    private variable flt_WellWidth_Y;
    private variable flt_ZFlag;
    private variable flt_X_Center;
    private variable flt_WellSearchAddOn;
    o_flt_X_Center = 0;
    o_flt_Y_Center = 0;
    o_flt_ContainerZMax = 0;
    o_flt_ContainerZMax = 0.0;
    o_flt_X_Center = 0.0;
    o_flt_Y_Center = 0.0;
    flt_ZMinimumAdjust = 2.0;
    flt_ZMinimum = i_flt_MinSearchZ - flt_ZMinimumAdjust;
    flt_ZMinimum = MthRound(flt_ZMinimum, 1);
    flt_ZFlag = flt_ZMinimum + 0.2;
    if(0){
      flt_MaximumSearchDistance = 25.0;
    }
    flt_WellSearchAddOn = i_flt_WellWidth * 0.5;
    flt_MaximumSearchDistance = i_flt_WellWidth + flt_WellSearchAddOn;
    flt_InitialSearchIncrement = 0.6;
    flt_InitialSearchIncrement2 = 0.6;
    flt_FineTuneIncrement = 0.3;
    flt_FineTuneIncrement2 = 0.3;
    flt_ZStart = i_flt_SafeHeight;
    int_SearchSensitivity = 1;
    int_SearchSensitivity2 = 1;
    flt_TeachingNeedleWidth = 0.6;
    flt_TeachingNeedleWidth_Half_X = 0.0;
    flt_TeachingNeedleWidth_Half_Y = 0.0;
    if(0){
      flt_TeachingNeedleWidth_X = 0.7;
      flt_TeachingNeedleWidth_Y = 0.6;
      flt_TeachingNeedleWidth_Half_X = flt_TeachingNeedleWidth_X / (2 * 1.0);
      flt_TeachingNeedleWidth_Half_Y = flt_TeachingNeedleWidth_Y / (2 * 1.0);
    }
    _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
    {
      int_TryCount = 0;
      while (1 == 1)
      {
        int_TryCount = int_TryCount + 1;
        onerror goto errLabel_9 ;
        err.Clear();
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_YBack = 0.0;
        MECC::TraceComment(Translate("Search + Y"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              flt_ZMinimum = flt_Z_Found - flt_ZMinimumAdjust;
              flt_ZMinimum = MthRound(flt_ZMinimum, 1);
              flt_ZFlag = flt_ZMinimum + 0.2;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YBack, NotUsed);
                  Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_FineTuneIncrement);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    Trace("     ","Edge found!  Y Coord:  ",flt_Position_YBack);
                  }
                }
              }
            }
            else
            {
              Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_InitialSearchIncrement);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_DistanceTraveled);
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_YFront = 0.0;
        MECC::TraceComment(Translate("Search - Y"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YFront, NotUsed);
                  Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_FineTuneIncrement);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    Trace("     ","Edge found!  Y Coord:  ",flt_Position_YFront);
                  }
                }
              }
            }
            else
            {
              Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_InitialSearchIncrement);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        flt_Y_Center = flt_Position_YBack + flt_Position_YFront;
        flt_Y_Center = flt_Y_Center / (2 * 1.0);
        flt_Y_Center = MthRound(flt_Y_Center, 2);
        Trace("Initial Y Center Found:  ",flt_Y_Center);
        _MoveYAbsolute(ML_STAR, i_int_CurrentChannel, flt_Y_Center);
        break;
        errLabel_9 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          flt_InitialSearchIncrement = 0.5;
        }   /* end if from skip handler if no error */
        int_ErrID = ErrGetId();
        str_ErrDescription = ErrGetDescription();
        if (int_ErrID != 101)
        {
          ErrRaise(int_ErrID, str_ErrDescription);
        }
        if (int_TryCount == 2)
        {
          ErrRaise(101, Translate("CONTAINER CANNOT BE FOUND"));
        }
      }
    }
    {
      int_TryCount = 0;
      while (1 == 1)
      {
        int_TryCount = int_TryCount + 1;
        onerror goto errLabel_10 ;
        err.Clear();
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_XRight = 0.0;
        MECC::TraceComment(Translate("Search + X"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, flt_Position_XRight, NotUsed, NotUsed);
                  Move_X_Relative(ML_STAR, 1, flt_FineTuneIncrement);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_XRight = flt_Position_XRight + flt_TeachingNeedleWidth_Half_X;
                    Trace("Edge found!  X Coord:  ",flt_Position_XRight);
                  }
                }
              }
            }
            else
            {
              Move_X_Relative(ML_STAR, 0, flt_InitialSearchIncrement);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              Trace("     ","Edge Not Found! X Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        Move_X_Relative(ML_STAR, 1, flt_DistanceTraveled);
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_XLeft = 0.0;
        MECC::TraceComment(Translate("Search - X"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, flt_Position_XLeft, NotUsed, NotUsed);
                  Move_X_Relative(ML_STAR, 0, flt_FineTuneIncrement);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_XLeft = flt_Position_XLeft - flt_TeachingNeedleWidth_Half_X;
                    Trace("      ","Edge found!  X Coord:  ",flt_Position_XLeft);
                  }
                }
              }
            }
            else
            {
              Move_X_Relative(ML_STAR, 1, flt_InitialSearchIncrement);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              Trace("     ","Edge Not Found! X Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        flt_X_Center = flt_Position_XLeft + flt_Position_XRight;
        flt_X_Center = flt_X_Center / (2 * 1.0);
        flt_X_Center = MthRound(flt_X_Center, 2);
        Trace("X Center Found:  ",flt_X_Center);
        _MoveXAbsolute(ML_STAR, flt_X_Center);
        break;
        errLabel_10 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          flt_InitialSearchIncrement = 0.5;
        }   /* end if from skip handler if no error */
        int_ErrID = ErrGetId();
        str_ErrDescription = ErrGetDescription();
        if (int_ErrID != 101)
        {
          ErrRaise(int_ErrID, str_ErrDescription);
        }
        if (int_TryCount == 2)
        {
          ErrRaise(101, Translate("CONTAINER CANNOT BE FOUND"));
        }
      }
    }
    {
      int_TryCount = 0;
      while (1 == 1)
      {
        int_TryCount = int_TryCount + 1;
        onerror goto errLabel_11 ;
        err.Clear();
        if(0){
          bol_WellEdgeFound = 0;
          flt_DistanceTraveled = 0.0;
          flt_Position_YBack = 0.0;
          MECC::TraceComment(Translate("Search + Y"));
          {
            while (bol_WellEdgeFound == 0)
            {
              if (flt_DistanceTraveled > flt_MaximumSearchDistance)
              {
                ErrRaise(101, Translate("Well wall was not found!"));
              }
              Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, 1, flt_Z_Found);
              _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
              if (flt_Z_Found > flt_ZMinimum)
              {
                flt_ZStart = flt_Z_Found + 5.0;
                o_flt_ContainerZMax = flt_Z_Found;
                {
                  while (bol_WellEdgeFound == 0)
                  {
                    Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YBack, NotUsed);
                    Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_FineTuneIncrement);
                    Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, 1, flt_Z_Found);
                    _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                    if (flt_Z_Found <= flt_ZMinimum)
                    {
                      bol_WellEdgeFound = 1;
                      Trace("Edge found!  Y Coord:  ",flt_Position_YBack);
                    }
                  }
                }
              }
              else
              {
                Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_InitialSearchIncrement);
                flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              }
            }
          }
          Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_DistanceTraveled);
          bol_WellEdgeFound = 0;
          flt_DistanceTraveled = 0.0;
          flt_Position_YFront = 0.0;
          MECC::TraceComment(Translate("Search - Y"));
          {
            while (bol_WellEdgeFound == 0)
            {
              if (flt_DistanceTraveled > flt_MaximumSearchDistance)
              {
              }
              Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, 1, flt_Z_Found);
              _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
              if (flt_Z_Found > flt_ZMinimum)
              {
                flt_ZStart = flt_Z_Found + 5.0;
                o_flt_ContainerZMax = flt_Z_Found;
                {
                  while (bol_WellEdgeFound == 0)
                  {
                    Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YFront, NotUsed);
                    Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_FineTuneIncrement);
                    Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, 1, flt_Z_Found);
                    _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                    if (flt_Z_Found <= flt_ZMinimum)
                    {
                      bol_WellEdgeFound = 1;
                      Trace("Edge found!  Y Coord:  ",flt_Position_YFront);
                    }
                  }
                }
              }
              else
              {
                Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_InitialSearchIncrement);
                flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              }
            }
          }
          flt_Y_Center = flt_Position_YBack + flt_Position_YFront;
          flt_Y_Center = flt_Y_Center / (2 * 1.0);
          flt_Y_Center = MthRound(flt_Y_Center, 1);
          Trace("Y Center Found:  ",flt_Y_Center);
          _MoveYAbsolute(ML_STAR, i_int_CurrentChannel, flt_Y_Center);
        }
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_YBack = 0.0;
        MECC::TraceComment(Translate("Search + Y"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YBack, NotUsed);
                  Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_FineTuneIncrement2);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_YBack = flt_Position_YBack + flt_TeachingNeedleWidth_Half_Y;
                    Trace("     ","Edge found!  Y Coord:  ",flt_Position_YBack);
                  }
                }
              }
            }
            else
            {
              Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_InitialSearchIncrement2);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement2;
              Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_DistanceTraveled);
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_YFront = 0.0;
        MECC::TraceComment(Translate("Search - Y"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YFront, NotUsed);
                  Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_FineTuneIncrement2);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_YFront = flt_Position_YFront - flt_TeachingNeedleWidth_Half_Y;
                    Trace("     ","Edge found!  Y Coord:  ",flt_Position_YFront);
                  }
                }
              }
            }
            else
            {
              Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_InitialSearchIncrement2);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement2;
              Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        flt_Y_Center = flt_Position_YBack + flt_Position_YFront;
        flt_Y_Center = flt_Y_Center / (2 * 1.0);
        flt_Y_Center = MthRound(flt_Y_Center, 2);
        Trace("Initial Y Center Found:  ",flt_Y_Center);
        _MoveYAbsolute(ML_STAR, i_int_CurrentChannel, flt_Y_Center);
        break;
        errLabel_11 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          flt_InitialSearchIncrement = 0.5;
        }   /* end if from skip handler if no error */
        int_ErrID = ErrGetId();
        str_ErrDescription = ErrGetDescription();
        if (int_ErrID != 101)
        {
          ErrRaise(int_ErrID, str_ErrDescription);
        }
        if (int_TryCount == 2)
        {
          ErrRaise(101, Translate("CONTAINER CANNOT BE FOUND"));
        }
      }
    }
    {
      int_TryCount = 0;
      while (1 == 1)
      {
        int_TryCount = int_TryCount + 1;
        onerror goto errLabel_12 ;
        err.Clear();
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_XRight = 0.0;
        MECC::TraceComment(Translate("Search + X"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, flt_Position_XRight, NotUsed, NotUsed);
                  Move_X_Relative(ML_STAR, 1, flt_FineTuneIncrement2);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_XRight = flt_Position_XRight + flt_TeachingNeedleWidth_Half_X;
                    Trace("Edge found!  X Coord:  ",flt_Position_XRight);
                  }
                }
              }
            }
            else
            {
              Move_X_Relative(ML_STAR, 0, flt_InitialSearchIncrement2);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement2;
              Trace("     ","Edge Not Found! X Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        Move_X_Relative(ML_STAR, 1, flt_DistanceTraveled);
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_XLeft = 0.0;
        MECC::TraceComment(Translate("Search - X"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (flt_Z_Found > flt_ZFlag)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, flt_Position_XLeft, NotUsed, NotUsed);
                  Move_X_Relative(ML_STAR, 0, flt_FineTuneIncrement2);
                  Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (flt_Z_Found <= flt_ZFlag)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_XLeft = flt_Position_XLeft - flt_TeachingNeedleWidth_Half_X;
                    Trace("      ","Edge found!  X Coord:  ",flt_Position_XLeft);
                  }
                }
              }
            }
            else
            {
              Move_X_Relative(ML_STAR, 1, flt_InitialSearchIncrement2);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement2;
              Trace("     ","Edge Not Found! X Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        flt_X_Center = flt_Position_XLeft + flt_Position_XRight;
        flt_X_Center = flt_X_Center / (2 * 1.0);
        flt_X_Center = MthRound(flt_X_Center, 2);
        Trace("X Center Found:  ",flt_X_Center);
        _MoveXAbsolute(ML_STAR, flt_X_Center);
        break;
        errLabel_12 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          flt_InitialSearchIncrement = 0.5;
        }   /* end if from skip handler if no error */
        int_ErrID = ErrGetId();
        str_ErrDescription = ErrGetDescription();
        if (int_ErrID != 101)
        {
          ErrRaise(int_ErrID, str_ErrDescription);
        }
        if (int_TryCount == 2)
        {
          ErrRaise(101, Translate("CONTAINER CANNOT BE FOUND"));
        }
      }
    }
    flt_WellWidth_X = flt_Position_XRight - flt_Position_XLeft;
    flt_WellWidth_Y = flt_Position_YBack - flt_Position_YFront;
    flt_WellWidth_X = flt_WellWidth_X + 0.5;
    flt_WellWidth_Y = flt_WellWidth_Y + 0.5;
    flt_WellWidth_X = MthRound(flt_WellWidth_X, 1);
    flt_WellWidth_Y = MthRound(flt_WellWidth_Y, 1);
    o_flt_X_Center = flt_X_Center;
    o_flt_Y_Center = flt_Y_Center;
    Trace("--------------------------------------------");
    Trace("");
    Trace("     ","Well width X found:  ",flt_WellWidth_X," mm");
    Trace("     ","Well width Y found:  ",flt_WellWidth_Y," mm");
    Trace("     ","X Center Found:  ",o_flt_X_Center);
    Trace("     ","Y Center Found:  ",o_flt_Y_Center);
    Trace("     ","Container Z Max Found:  ",o_flt_ContainerZMax);
    Trace("");
    Trace("--------------------------------------------");
  }

  function Abstract(  ) void {
    private variable str_CurrentVersion;
    str_CurrentVersion = Translate("3.2.3");
    Trace("STAR Firmware Channel Contol Version:  ",str_CurrentVersion);
  }

  function SearchForCLLD_X( device & ML_STAR, variable i_int_Channel, variable i_flt_DistanceToSearch, variable i_int_DirectionToSearch, variable & o_flt_XCoordinateFound ) variable {
    private variable ret_bln_CLLDFound;
    private variable flt_DistanceTraveled;
    private variable flt_SlowDownPoint;
    private variable flt_DistanceToMove;
    private variable int_CLLD_Status;
    private variable flt_ZCoord;
    private variable flt_YCoord;
    private variable flt_XCoord;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_Params;
    private variable flt_CurrentX;
    private variable flt_CurrentY;
    private variable flt_CurrentZ;
    private variable str_Position;
    private variable flt_EndX;
    private variable str_ReturnValue;
    private variable str_Channel;
    o_flt_XCoordinateFound = 0;
    o_flt_XCoordinateFound = 0.0;
    ret_bln_CLLDFound = 0;
    flt_DistanceTraveled = 0.0;
    flt_SlowDownPoint = i_flt_DistanceToSearch * 0.8;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    SwitchLLDMeasurement(ML_STAR, 1);
    GetCLLDStatus(ML_STAR, i_int_Channel, int_CLLD_Status);
    if (int_CLLD_Status == 2)
    {
      MECC::TraceComment(Translate("##############################################################################\nCLLD IS NOT TURNED ON!\n##############################################################################"));
      SwitchLLDMeasurement(ML_STAR, 0);
      return (ret_bln_CLLDFound);
    }
    if (int_CLLD_Status == 1)
    {
      MECC::TraceComment(Translate("##############################################################################\nUNEXPECTED CLLD FOUND!!!\n##############################################################################"));
      SwitchLLDMeasurement(ML_STAR, 0);
      return (ret_bln_CLLDFound);
    }
    Get_Channel_Position(ML_STAR, i_int_Channel, flt_CurrentX, flt_CurrentY, flt_CurrentZ);
    if (i_int_DirectionToSearch == 0)
    {
      flt_EndX = flt_CurrentX + i_flt_DistanceToSearch;
    }
    else
    {
      flt_EndX = flt_CurrentX - i_flt_DistanceToSearch;
    }
    flt_EndX = flt_EndX * 10;
    flt_EndX = MthRound(flt_EndX, 0);
    str_Position = StrConcat2(flt_EndX, Translate(""));
    str_Position = StrFillLeft(str_Position, Translate("0"), 5);
    str_Position = StrLeft(str_Position, 5);
    str_Channel = StrConcat2(i_int_Channel, Translate(""));
    str_Channel = StrFillLeft(str_Channel, Translate("0"), 2);
    str_Params = StrConcat12(Translate("pn"), str_Channel, Translate("xs"), str_Position, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Trace(str_Params);
    if(0){
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	str_ReturnValue = arrRetValues[3];
      }
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    GetCLLDStatus(ML_STAR, i_int_Channel, int_CLLD_Status);
    onerror goto errLabel_13 ;
    err.Clear();
    _CheckForError(strFunctionName, str_ReturnValue, 1);
    Trace("CLLD Status:  ",int_CLLD_Status);
    if (int_CLLD_Status != 0)
    {
      ret_bln_CLLDFound = 1;
    }
    else
    {
      ret_bln_CLLDFound = 0;
    }
    errLabel_13 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      ret_bln_CLLDFound = 0;
    }   /* end if from skip handler if no error */
    if(0){
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	str_ReturnValue = arrRetValues[3];
      }
      {
        while (flt_DistanceTraveled < i_flt_DistanceToSearch)
        {
          if (flt_DistanceTraveled < flt_SlowDownPoint)
          {
            flt_DistanceToMove = 0.5;
          }
          else
          {
            flt_DistanceToMove = 0.1;
          }
          Move_X_Relative(ML_STAR, i_int_DirectionToSearch, flt_DistanceToMove);
          GetCLLDStatus(ML_STAR, i_int_Channel, int_CLLD_Status);
          if (int_CLLD_Status == 1)
          {
            Get_Channel_Position(ML_STAR, i_int_Channel, flt_XCoord, flt_YCoord, flt_ZCoord);
            o_flt_XCoordinateFound = flt_XCoord;
            Trace("CLLD Position found:  ","X Coord:  ",flt_XCoord);
            ret_bln_CLLDFound = 1;
            break;
          }
          flt_DistanceTraveled = flt_DistanceTraveled + flt_DistanceToMove;
        }
      }
      SwitchLLDMeasurement(ML_STAR, 1);
      GetCLLDStatus(ML_STAR, i_int_Channel, int_CLLD_Status);
    }
    SwitchLLDMeasurement(ML_STAR, 0);
    if(0){
      if (int_CLLD_Status == 1)
      {
        ret_bln_CLLDFound = 1;
      }
    }
    Get_Channel_Position(ML_STAR, i_int_Channel, flt_XCoord, flt_YCoord, flt_ZCoord);
    o_flt_XCoordinateFound = flt_XCoord;
    Trace("CLLD Position found:  ","X Coord:  ",flt_XCoord);
    Trace("Wall Found:  ",ret_bln_CLLDFound);
    return (ret_bln_CLLDFound);
  }

  function SwitchLLDMeasurement( device & ML_STAR, variable i_bln_TurnOn ) void {
    private variable str_FW_CMND;
    private variable str_FW_Params;
    str_FW_CMND = Translate("PXAL");
    if (i_bln_TurnOn == 1)
    {
      str_FW_Params = StrConcat12(Translate("al1"), Translate("lc0"), Translate("gt0001"), Translate("gl0000"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    else
    {
      str_FW_Params = StrConcat12(Translate("al0"), Translate("lc0"), Translate("gt0010"), Translate("gl0010"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  function GetCLLDStatus( device & ML_STAR, variable i_int_ChannelNumber, variable & o_int_CLLDStatus ) void {
    private variable str_FW_CMND;
    private variable str_ReturnValue;
    private variable bol_ParamFound;
    private variable int_Value;
    o_int_CLLDStatus = 0;
    o_int_CLLDStatus = 0;
    _GetChannelNumber(i_int_ChannelNumber);
    str_FW_CMND = StrConcat4(Translate("P"), i_int_ChannelNumber, Translate("RN"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _Parse_Parameter_Single(str_ReturnValue, Translate("rn"), 1, 1, bol_ParamFound, int_Value);
    if (bol_ParamFound == 1)
    {
      o_int_CLLDStatus = int_Value;
    }
  }

  function SearchForCLLD_Y( device & ML_STAR, variable i_int_Channel, variable i_flt_DistanceToSearch, variable i_int_DirectionToSearch, variable & o_flt_YCoordinateFound ) variable {
    private variable flt_ZCoord;
    private variable flt_SlowDownPoint;
    private variable flt_YCoord;
    private variable flt_XCoord;
    private variable ret_bln_CLLDFound;
    private variable int_CLLD_Status;
    private variable flt_DistanceTraveled;
    private variable flt_YConversion;
    private variable flt_CurrentX;
    private variable flt_CurrentY;
    private variable flt_CurrentZ;
    private variable flt_EndY;
    private variable flt_EndStepY;
    private variable str_Position;
    private variable str_Params;
    private variable str_Command;
    private variable str_ReturnValue;
    private variable strFunctionName;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable int_Channel;
    o_flt_YCoordinateFound = 0;
    o_flt_YCoordinateFound = 0.0;
    ret_bln_CLLDFound = 0;
    flt_DistanceTraveled = 0.0;
    flt_YConversion = 0.046302083;
    flt_SlowDownPoint = i_flt_DistanceToSearch * 0.8;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    SwitchLLDMeasurement(ML_STAR, 1);
    GetCLLDStatus(ML_STAR, i_int_Channel, int_CLLD_Status);
    if (int_CLLD_Status == 2)
    {
      MECC::TraceComment(Translate("##############################################################################\nCLLD IS NOT TURNED ON!\n##############################################################################"));
      SwitchLLDMeasurement(ML_STAR, 0);
      return (ret_bln_CLLDFound);
    }
    if (int_CLLD_Status == 1)
    {
      MECC::TraceComment(Translate("##############################################################################\nUNEXPECTED CLLD FOUND!!!\n##############################################################################"));
      SwitchLLDMeasurement(ML_STAR, 0);
      return (ret_bln_CLLDFound);
    }
    SwitchLLDMeasurement(ML_STAR, 0);
    int_Channel = i_int_Channel;
    _GetChannelNumber(int_Channel);
    str_Command = StrConcat4(Translate("P"), int_Channel, Translate("YL"), Translate(""));
    Get_Channel_Position(ML_STAR, i_int_Channel, flt_CurrentX, flt_CurrentY, flt_CurrentZ);
    if (i_int_DirectionToSearch == 0)
    {
      flt_EndY = flt_CurrentY + i_flt_DistanceToSearch;
    }
    else
    {
      flt_EndY = flt_CurrentY - i_flt_DistanceToSearch;
    }
    flt_EndStepY = flt_EndY / (flt_YConversion * 1.0);
    flt_EndStepY = MthRound(flt_EndStepY, 0);
    str_Position = StrConcat2(flt_EndStepY, Translate(""));
    str_Position = StrFillLeft(str_Position, Translate("0"), 5);
    str_Position = StrLeft(str_Position, 5);
    str_Params = StrConcat12(Translate("ya"), str_Position, Translate("gt0001"), Translate("gl0000"), Translate("yv0044"), Translate("yr4"), Translate("yw1"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Trace(str_Params);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    GetCLLDStatus(ML_STAR, i_int_Channel, int_CLLD_Status);
    onerror goto errLabel_14 ;
    err.Clear();
    _CheckForError(strFunctionName, str_ReturnValue, 1);
    if (int_CLLD_Status != 0)
    {
      ret_bln_CLLDFound = 1;
    }
    else
    {
      ret_bln_CLLDFound = 0;
    }
    errLabel_14 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      ret_bln_CLLDFound = 0;
    }   /* end if from skip handler if no error */
    str_Command = StrConcat4(Translate("P"), int_Channel, Translate("AA"), Translate(""));
    str_Params = StrConcat12(Translate(""), Translate(""), Translate("gt0010"), Translate("gl0010"), Translate("yv6000"), Translate("yr4"), Translate("yw7"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    if(0){
      SwitchLLDMeasurement(ML_STAR, 1);
      GetCLLDStatus(ML_STAR, i_int_Channel, int_CLLD_Status);
    }
    SwitchLLDMeasurement(ML_STAR, 0);
    if(0){
      if (int_CLLD_Status == 1)
      {
        ret_bln_CLLDFound = 1;
      }
    }
    Get_Channel_Position(ML_STAR, i_int_Channel, flt_XCoord, flt_YCoord, flt_ZCoord);
    o_flt_YCoordinateFound = flt_YCoord;
    Trace("CLLD Position found:  ","Y Coord:  ",flt_YCoord);
    Trace("Wall Found:  ",ret_bln_CLLDFound);
    return (ret_bln_CLLDFound);
  }

  function Find_Well_Center_3( device & ML_STAR, variable i_int_CurrentChannel, variable i_flt_MinSearchZ, variable i_flt_TipLength, variable i_flt_SafeHeight, variable i_flt_WellWidth, variable i_flt_InitialSearchIncrement, variable i_flt_FineTuneIncrement, variable & o_flt_X_Center, variable & o_flt_Y_Center, variable & o_flt_ContainerZMax, variable & o_flt_X_Width, variable & o_flt_Y_Width ) void {
    private variable flt_Position_XRight;
    private variable flt_InitialSearchIncrement;
    private variable NotUsed;
    private variable flt_ZMinimumAdjust;
    private variable bol_WellEdgeFound;
    private variable flt_Y_Center;
    private variable flt_FineTuneIncrement2;
    private variable str_ErrDescription;
    private variable flt_InitialSearchIncrement2;
    private variable flt_TeachingNeedleWidth;
    private variable int_SearchSensitivity;
    private variable flt_TeachingNeedleWidth_Half_X;
    private variable flt_DistanceTraveled;
    private variable flt_FineTuneIncrement;
    private variable flt_TeachingNeedleWidth_Half_Y;
    private variable flt_Position_XLeft;
    private variable flt_Position_YBack;
    private variable int_SearchSensitivity2;
    private variable flt_WellSearchAddOn;
    private variable flt_Position_YFront;
    private variable flt_MaximumSearchDistance;
    private variable flt_ZMinimum;
    private variable int_TryCount;
    private variable int_ErrID;
    private variable flt_ZStart;
    private variable flt_Z_Found;
    private variable flt_WellWidth_X;
    private variable flt_WellWidth_Y;
    private variable flt_ZFlag;
    private variable flt_X_Center;
    private variable bool_WallFound;
    o_flt_X_Center = 0;
    o_flt_Y_Center = 0;
    o_flt_ContainerZMax = 0;
    o_flt_X_Width = 0;
    o_flt_Y_Width = 0;
    o_flt_ContainerZMax = 0.0;
    o_flt_X_Center = 0.0;
    o_flt_Y_Center = 0.0;
    flt_ZMinimumAdjust = 2.0;
    if(0){
      flt_ZMinimum = i_flt_MinSearchZ - flt_ZMinimumAdjust;
    }
    flt_ZMinimum = i_flt_MinSearchZ - 0.0;
    flt_ZMinimum = MthRound(flt_ZMinimum, 1);
    flt_ZFlag = flt_ZMinimum + 0.2;
    if(0){
      flt_MaximumSearchDistance = 25.0;
    }
    flt_WellSearchAddOn = i_flt_WellWidth * 0.1;
    flt_MaximumSearchDistance = i_flt_WellWidth + flt_WellSearchAddOn;
    flt_InitialSearchIncrement = i_flt_InitialSearchIncrement;
    flt_InitialSearchIncrement2 = i_flt_InitialSearchIncrement;
    flt_FineTuneIncrement = i_flt_FineTuneIncrement;
    flt_FineTuneIncrement2 = i_flt_FineTuneIncrement;
    flt_ZStart = i_flt_SafeHeight;
    int_SearchSensitivity = 1;
    int_SearchSensitivity2 = 1;
    flt_TeachingNeedleWidth = 0.6;
    flt_TeachingNeedleWidth_Half_X = 0.0;
    flt_TeachingNeedleWidth_Half_Y = 0.0;
    _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
    {
      int_TryCount = 0;
      while (1 == 1)
      {
        int_TryCount = int_TryCount + 1;
        onerror goto errLabel_15 ;
        err.Clear();
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_YBack = 0.0;
        MECC::TraceComment(Translate("Search + Y"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            bool_WallFound = Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (bool_WallFound == 1)
            {
              MECC::TraceComment(Translate("Wall found fine tuning position"));
              flt_ZStart = flt_Z_Found + 5.0;
              flt_ZMinimum = flt_Z_Found - flt_ZMinimumAdjust;
              flt_ZMinimum = MthRound(flt_ZMinimum, 1);
              flt_ZFlag = flt_ZMinimum + 0.2;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YBack, NotUsed);
                  Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_FineTuneIncrement);
                  bool_WallFound = Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (bool_WallFound == 0)
                  {
                    bol_WellEdgeFound = 1;
                    Trace("     ","Edge found!  Y Coord:  ",flt_Position_YBack);
                  }
                }
              }
            }
            else
            {
              Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_InitialSearchIncrement);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_DistanceTraveled);
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_YFront = 0.0;
        MECC::TraceComment(Translate("Search - Y"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            bool_WallFound = Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (bool_WallFound == 1)
            {
              MECC::TraceComment(Translate("Wall found fine tuning position"));
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, NotUsed, flt_Position_YFront, NotUsed);
                  Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 0, flt_FineTuneIncrement);
                  bool_WallFound = Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (bool_WallFound == 0)
                  {
                    bol_WellEdgeFound = 1;
                    Trace("     ","Edge found!  Y Coord:  ",flt_Position_YFront);
                  }
                }
              }
            }
            else
            {
              Move_Y_Relative(ML_STAR, i_int_CurrentChannel, 1, flt_InitialSearchIncrement);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        flt_Y_Center = flt_Position_YBack + flt_Position_YFront;
        flt_Y_Center = flt_Y_Center / (2 * 1.0);
        flt_Y_Center = MthRound(flt_Y_Center, 2);
        Trace("Initial Y Center Found:  ",flt_Y_Center);
        _MoveYAbsolute(ML_STAR, i_int_CurrentChannel, flt_Y_Center);
        break;
        errLabel_15 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          flt_InitialSearchIncrement = 0.5;
        }   /* end if from skip handler if no error */
        int_ErrID = ErrGetId();
        str_ErrDescription = ErrGetDescription();
        if (int_ErrID != 101)
        {
          ErrRaise(int_ErrID, str_ErrDescription);
        }
        if (int_TryCount == 2)
        {
          ErrRaise(101, Translate("CONTAINER CANNOT BE FOUND"));
        }
      }
    }
    {
      int_TryCount = 0;
      while (1 == 1)
      {
        int_TryCount = int_TryCount + 1;
        onerror goto errLabel_16 ;
        err.Clear();
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_XRight = 0.0;
        MECC::TraceComment(Translate("Search + X"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            bool_WallFound = Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            Trace("     ","Edge Not Found! Y Distance Traveled:  ",flt_DistanceTraveled);
            if (bool_WallFound == 1)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, flt_Position_XRight, NotUsed, NotUsed);
                  Move_X_Relative(ML_STAR, 1, flt_FineTuneIncrement);
                  bool_WallFound = Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (bool_WallFound == 0)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_XRight = flt_Position_XRight + flt_TeachingNeedleWidth_Half_X;
                    Trace("Edge found!  X Coord:  ",flt_Position_XRight);
                  }
                }
              }
            }
            else
            {
              Move_X_Relative(ML_STAR, 0, flt_InitialSearchIncrement);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              Trace("     ","Edge Not Found! X Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        Move_X_Relative(ML_STAR, 1, flt_DistanceTraveled);
        bol_WellEdgeFound = 0;
        flt_DistanceTraveled = 0.0;
        flt_Position_XLeft = 0.0;
        MECC::TraceComment(Translate("Search - X"));
        {
          while (bol_WellEdgeFound == 0)
          {
            if (flt_DistanceTraveled > flt_MaximumSearchDistance)
            {
              ErrRaise(101, Translate("Well wall was not found!"));
            }
            bool_WallFound = Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity, flt_Z_Found);
            _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
            Trace("");
            Trace("    ","Safe Height:  ",flt_ZStart);
            Trace("    ","Plate Height:  ",i_flt_MinSearchZ);
            Trace("    ","Search Minimum Z:  ",flt_ZMinimum);
            Trace("    ","Current Z Found:  ",flt_Z_Found);
            if (bool_WallFound == 1)
            {
              flt_ZStart = flt_Z_Found + 5.0;
              o_flt_ContainerZMax = flt_Z_Found;
              {
                while (bol_WellEdgeFound == 0)
                {
                  Get_Channel_Position(ML_STAR, i_int_CurrentChannel, flt_Position_XLeft, NotUsed, NotUsed);
                  Move_X_Relative(ML_STAR, 0, flt_FineTuneIncrement);
                  bool_WallFound = Search_Z(ML_STAR, i_int_CurrentChannel, flt_ZMinimum, i_flt_TipLength, int_SearchSensitivity2, flt_Z_Found);
                  _MoveZAbsolute(ML_STAR, i_int_CurrentChannel, flt_ZStart);
                  if (bool_WallFound == 0)
                  {
                    bol_WellEdgeFound = 1;
                    flt_Position_XLeft = flt_Position_XLeft - flt_TeachingNeedleWidth_Half_X;
                    Trace("      ","Edge found!  X Coord:  ",flt_Position_XLeft);
                  }
                }
              }
            }
            else
            {
              Move_X_Relative(ML_STAR, 1, flt_InitialSearchIncrement);
              flt_DistanceTraveled = flt_DistanceTraveled + flt_InitialSearchIncrement;
              Trace("     ","Edge Not Found! X Distance Traveled:  ",flt_DistanceTraveled);
            }
          }
        }
        Trace("");
        flt_X_Center = flt_Position_XLeft + flt_Position_XRight;
        flt_X_Center = flt_X_Center / (2 * 1.0);
        flt_X_Center = MthRound(flt_X_Center, 2);
        Trace("X Center Found:  ",flt_X_Center);
        _MoveXAbsolute(ML_STAR, flt_X_Center);
        break;
        errLabel_16 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          flt_InitialSearchIncrement = 0.5;
        }   /* end if from skip handler if no error */
        int_ErrID = ErrGetId();
        str_ErrDescription = ErrGetDescription();
        if (int_ErrID != 101)
        {
          ErrRaise(int_ErrID, str_ErrDescription);
        }
        if (int_TryCount == 2)
        {
          ErrRaise(101, Translate("CONTAINER CANNOT BE FOUND"));
        }
      }
    }
    flt_WellWidth_X = flt_Position_XRight - flt_Position_XLeft;
    flt_WellWidth_Y = flt_Position_YBack - flt_Position_YFront;
    if(0){
      flt_WellWidth_X = flt_WellWidth_X + flt_TeachingNeedleWidth;
      flt_WellWidth_Y = flt_WellWidth_Y + flt_TeachingNeedleWidth;
    }
    flt_WellWidth_X = flt_WellWidth_X + 0.0;
    flt_WellWidth_Y = flt_WellWidth_Y + 0.0;
    flt_WellWidth_X = MthRound(flt_WellWidth_X, 1);
    flt_WellWidth_Y = MthRound(flt_WellWidth_Y, 1);
    o_flt_X_Center = flt_X_Center;
    o_flt_Y_Center = flt_Y_Center;
    o_flt_X_Width = flt_WellWidth_X;
    o_flt_Y_Width = flt_WellWidth_Y;
    Trace("--------------------------------------------");
    Trace("");
    Trace("     ","Well width X found:  ",flt_WellWidth_X," mm");
    Trace("     ","Well width Y found:  ",flt_WellWidth_Y," mm");
    Trace("     ","X Center Found:  ",o_flt_X_Center);
    Trace("     ","Y Center Found:  ",o_flt_Y_Center);
    Trace("     ","Container Z Max Found:  ",o_flt_ContainerZMax);
    Trace("");
    Trace("--------------------------------------------");
  }

  private function __Parse_Parameter_Single_String( variable i_str_ParameterFull, variable i_str_Parameter, variable & o_bol_ParameterFound, variable & o_str_Value ) void {
    private variable str_Value3;
    private variable int_Remaining;
    private variable str_RegionOfInterest;
    private variable int_ValueNumber;
    private variable int_LoopCount;
    private variable int_StringPosition;
    private variable int_ParamaterLength;
    private variable int_SecondCut;
    private variable int_Count;
    private variable str_Value;
    private variable str_Value2;
    o_bol_ParameterFound = 0;
    o_str_Value = 0;
    o_str_Value = Translate("");
    o_bol_ParameterFound = StrReplace(i_str_ParameterFull, i_str_Parameter, i_str_Parameter);
    int_ParamaterLength = StrGetLength(i_str_ParameterFull);
    if (o_bol_ParameterFound == 1)
    {
      int_StringPosition = StrFind(i_str_ParameterFull, i_str_Parameter);
      int_StringPosition = int_StringPosition + 1;
      int_Remaining = int_ParamaterLength - int_StringPosition;
      str_RegionOfInterest = StrMid(i_str_ParameterFull, int_StringPosition, int_Remaining);
      int_ValueNumber = int_Remaining + 1;
      int_SecondCut = int_Remaining;
      int_Count = 1;
      {
        int_LoopCount = 0;
        while (1 == 1)
        {
          int_LoopCount = int_LoopCount + 1;
          str_Value = StrMid(str_RegionOfInterest, int_Count, int_ValueNumber);
          int_Count = int_Count + int_ValueNumber;
          str_Value2 = StrLeft(str_Value, int_SecondCut);
          o_str_Value = str_Value2;
          str_Value3 = StrRight(str_Value, 1);
          if (str_Value3 != " ")
          {
            break;
          }
        }
      }
    }
  }

  function _CheckForError( variable i_str_FunctionName, variable i_str_ReturnValue, variable i_bool_RaiseError ) void {
    private variable str_ErrorReturn;
    private variable bool_ParamFound;
    private variable str_MainError;
    private variable str_SlaveError;
    private variable str_MainErrorCode;
    private variable str_SlaveErrorCode;
    private variable str_ErrorRaise;
    private variable int_ErrorCode;
    private variable bool_SimMode;
    private variable int_MainErrorCode;
    private variable arr_Channels[];
    private variable arr_SlaveErrors[];
    private variable int_TotalErrors;
    private variable i;
    private variable arr_ErrorDescription[];
    bool_SimMode = Util::GetSimulationMode();
    __Parse_Parameter_Single_String(i_str_ReturnValue, Translate("er"), bool_ParamFound, str_ErrorReturn);
    if (bool_ParamFound == 0)
    {
      return;
    }
    if (bool_SimMode == 1)
    {
      i_bool_RaiseError = 0;
    }
    str_ErrorReturn = StrLeft(str_ErrorReturn, 5);
    str_MainErrorCode = StrLeft(str_ErrorReturn, 2);
    str_SlaveErrorCode = StrRight(str_ErrorReturn, 2);
    if (str_MainErrorCode == "00")
    {
      return;
    }
    str_MainErrorCode = StrTrimRight(str_MainErrorCode, Translate(" "));
    int_MainErrorCode = StrIVal(str_MainErrorCode);
    str_MainErrorCode = StrConcat2(int_MainErrorCode, Translate(""));
    if (str_MainErrorCode == "0")
    {
      return;
    }
    _GetErrorDescriptionMainError(str_MainErrorCode, str_MainError);
    str_SlaveErrorCode = Translate("");
    str_SlaveError = Translate("");
    if (str_MainErrorCode == "99")
    {
      _GetSlaveError(i_str_ReturnValue, arr_Channels, arr_SlaveErrors, arr_ErrorDescription);
      int_TotalErrors=arr_Channels.GetSize();
      {
        for(i = 0; i < int_TotalErrors;)
        {
          i = i + 1;
          if (i == 1)
          {
            str_SlaveErrorCode = StrConcat4(str_SlaveErrorCode, Translate("; "), Translate(""), Translate(""));
          }
          str_SlaveErrorCode = StrConcat4(str_SlaveErrorCode, arr_Channels.ElementAt( i -1), Translate(" "), arr_SlaveErrors.ElementAt( i -1));
          str_SlaveErrorCode = StrConcat2(str_SlaveErrorCode, Translate("  "));
          str_SlaveError = StrConcat4(str_SlaveError, arr_Channels.ElementAt( i -1), Translate(" "), arr_ErrorDescription.ElementAt( i -1));
          str_SlaveError = StrConcat2(str_SlaveError, Translate("  "));
        }
      }
    }
    Trace("Main Error Code:  ",str_MainErrorCode,"  Main Error Description:  ",str_MainError);
    Trace("Slave Error Code:  ",str_SlaveErrorCode,"  Slave Error Description:  ",str_SlaveError);
    if (i_bool_RaiseError == 1)
    {
      str_ErrorRaise = StrConcat12(i_str_FunctionName, Translate(" :: "), Translate("Error while running function"), Translate("\n\n"), str_SlaveErrorCode, Translate(" - "), str_SlaveError, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      int_ErrorCode = StrIVal(str_SlaveErrorCode);
      ErrRaise(int_ErrorCode, str_ErrorRaise);
    }
  }

  private function _GetErrorDescriptionSlaveError( variable i_str_ErrorCode, variable & o_str_ErrorDescription ) void {
    private variable str_ErrorHeader;
    private variable str_ErrorDescription;
    private variable str_ErrorCause;
    o_str_ErrorDescription = 0;
    i_str_ErrorCode = StrConcat2(i_str_ErrorCode, Translate(""));
    str_ErrorHeader = Translate("");
    str_ErrorDescription = Translate("Unknown error");
    str_ErrorCause = Translate("");
    o_str_ErrorDescription = Translate("");
    if (i_str_ErrorCode == "00")
    {
      str_ErrorHeader = Translate("");
      str_ErrorDescription = Translate("No Error");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "20")
    {
      str_ErrorHeader = StrConcat2(Translate("Transfer check"), Translate(" :: "));
      str_ErrorDescription = Translate("No communication to EEPROM");
      str_ErrorCause = Translate("I2C Bus or EEPROM not working");
    }
    if (i_str_ErrorCode == "30")
    {
      str_ErrorHeader = StrConcat2(Translate("Syntax check"), Translate(" :: "));
      str_ErrorDescription = Translate("Undefined command");
      str_ErrorCause = Translate("unknown command");
    }
    if (i_str_ErrorCode == "31")
    {
      str_ErrorHeader = StrConcat2(Translate("Syntax check"), Translate(" :: "));
      str_ErrorDescription = Translate("Undefined parameter");
      str_ErrorCause = Translate("unknown parameter");
    }
    if (i_str_ErrorCode == "32")
    {
      str_ErrorHeader = StrConcat2(Translate("Syntax check"), Translate(" :: "));
      str_ErrorDescription = Translate("Parameter out of range");
      str_ErrorCause = Translate("parameter outside permitted range");
    }
    if (i_str_ErrorCode == "35")
    {
      str_ErrorHeader = StrConcat2(Translate("General errors during execution of commands"), Translate(" :: "));
      str_ErrorDescription = Translate("Voltages outside permitted range");
      str_ErrorCause = Translate("Hardware not working properly");
    }
    if (i_str_ErrorCode == "36")
    {
      str_ErrorHeader = StrConcat2(Translate("General errors during execution of commands"), Translate(" :: "));
      str_ErrorDescription = Translate("Stop during execution of a command");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "37")
    {
      str_ErrorHeader = StrConcat2(Translate("General errors during execution of commands"), Translate(" :: "));
      str_ErrorDescription = Translate("Movement interrupted");
      str_ErrorCause = Translate("Second core gripper pipetting channel has a step loss");
    }
    if (i_str_ErrorCode == "40")
    {
      str_ErrorHeader = StrConcat2(Translate("Parallelity errors"), Translate(" :: "));
      str_ErrorDescription = Translate("No parallel processes permitted");
      str_ErrorCause = Translate("Two or more commands sent for the same control");
    }
    if (i_str_ErrorCode == "50")
    {
      str_ErrorHeader = StrConcat2(Translate("Dispensing drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Init. position not found");
      str_ErrorCause = Translate("Hardware not working");
    }
    if (i_str_ErrorCode == "51")
    {
      str_ErrorHeader = StrConcat2(Translate("Dispensing drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Drive not initialized");
      str_ErrorCause = Translate("Command sent before drive initialized");
    }
    if (i_str_ErrorCode == "52")
    {
      str_ErrorHeader = StrConcat2(Translate("Dispensing drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Movement error");
      str_ErrorCause = Translate("step loss");
    }
    if (i_str_ErrorCode == "53")
    {
      str_ErrorHeader = StrConcat2(Translate("Dispensing drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Maximum volume in tip reached");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "54")
    {
      str_ErrorHeader = StrConcat2(Translate("Dispensing drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Position out of permitted area");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "55")
    {
      str_ErrorHeader = StrConcat2(Translate("Y-drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Drive blocked");
      str_ErrorCause = Translate("Hardware not working");
    }
    if (i_str_ErrorCode == "56")
    {
      str_ErrorHeader = StrConcat2(Translate("Y-drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Drive not initialized");
      str_ErrorCause = Translate("Command sent before drive initialized");
    }
    if (i_str_ErrorCode == "57")
    {
      str_ErrorHeader = StrConcat2(Translate("Y-drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Movement error");
      str_ErrorCause = Translate("Step loss");
    }
    if (i_str_ErrorCode == "60")
    {
      str_ErrorHeader = StrConcat2(Translate("Z-drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Drive blocked");
      str_ErrorCause = Translate("Hardware not working");
    }
    if (i_str_ErrorCode == "61")
    {
      str_ErrorHeader = StrConcat2(Translate("Z-drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Drive not initialized");
      str_ErrorCause = Translate("Command sent before drive initialized");
    }
    if (i_str_ErrorCode == "62")
    {
      str_ErrorHeader = StrConcat2(Translate("Z-drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Movement error");
      str_ErrorCause = Translate("Step loss");
    }
    if (i_str_ErrorCode == "63")
    {
      str_ErrorHeader = StrConcat2(Translate("Z-drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Limit stop not found");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "65")
    {
      str_ErrorHeader = StrConcat2(Translate("Squeezer drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Drive blocked");
      str_ErrorCause = Translate("Hardware not working");
    }
    if (i_str_ErrorCode == "66")
    {
      str_ErrorHeader = StrConcat2(Translate("Squeezer drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Drive not initialized");
      str_ErrorCause = Translate("Command sent before drive initialized");
    }
    if (i_str_ErrorCode == "67")
    {
      str_ErrorHeader = StrConcat2(Translate("Squeezer drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Movement error");
      str_ErrorCause = Translate("Step loss");
    }
    if (i_str_ErrorCode == "68")
    {
      str_ErrorHeader = StrConcat2(Translate("Squeezer drive"), Translate(" :: "));
      str_ErrorDescription = Translate("Init. position adjustment error");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "70")
    {
      str_ErrorHeader = StrConcat2(Translate("Liquid Level Detection"), Translate(" :: "));
      str_ErrorDescription = Translate("No liquid level found");
      str_ErrorCause = Translate("No liquid present");
    }
    if (i_str_ErrorCode == "71")
    {
      str_ErrorHeader = StrConcat2(Translate("Liquid Level Detection"), Translate(" :: "));
      str_ErrorDescription = Translate("Not enough liquid present");
      str_ErrorCause = Translate("Immersion depth or surface following position below minimal access range");
    }
    if (i_str_ErrorCode == "72")
    {
      str_ErrorHeader = StrConcat2(Translate("Liquid Level Detection"), Translate(" :: "));
      str_ErrorDescription = Translate("Auto calibration at pressure sensor not possible");
      str_ErrorCause = Translate("Hardware not working");
    }
    if (i_str_ErrorCode == "73")
    {
      str_ErrorHeader = StrConcat2(Translate("Liquid Level Detection"), Translate(" :: "));
      str_ErrorDescription = Translate("No liquid level found with dual LLD");
      str_ErrorCause = Translate("Difference of LLD positions on dual LLD exceed the maximum");
    }
    if (i_str_ErrorCode == "74")
    {
      str_ErrorHeader = StrConcat2(Translate("Liquid Level Detection"), Translate(" :: "));
      str_ErrorDescription = Translate("Liquid at a not allowed position detected");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "75")
    {
      str_ErrorHeader = StrConcat2(Translate("Error on tip handling"), Translate(" :: "));
      str_ErrorDescription = Translate("No tip picked up");
      str_ErrorCause = Translate("No tip present at position");
    }
    if (i_str_ErrorCode == "76")
    {
      str_ErrorHeader = StrConcat2(Translate("Error on tip handling"), Translate(" :: "));
      str_ErrorDescription = Translate("Tip already picked up");
      str_ErrorCause = Translate("A fresh tip cannot be picked up, because one is already present");
    }
    if (i_str_ErrorCode == "77")
    {
      str_ErrorHeader = StrConcat2(Translate("Error on tip handling"), Translate(" :: "));
      str_ErrorDescription = Translate("Tip not discarded");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "78")
    {
      str_ErrorHeader = StrConcat2(Translate("Error on tip handling"), Translate(" :: "));
      str_ErrorDescription = Translate("Wrong tip detected");
      str_ErrorCause = Translate("The tip picked up was not of tip type specified");
    }
    if (i_str_ErrorCode == "80")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("Liquid not correctly aspirated");
      str_ErrorCause = Translate("Error in liquid aspiration");
    }
    if (i_str_ErrorCode == "81")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("Clot detected");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "82")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("TADM measurement out of lower limit curve");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "83")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("TADM measurement out of upper limit curve");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "84")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("Not enough memory for TADM measurement");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "85")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("No communication to digital potentiometer");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "86")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("ADC algorithm error");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "87")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("2nd phase of liquid not found");
      str_ErrorCause = Translate("No 2nd phase of liquid present");
    }
    if (i_str_ErrorCode == "88")
    {
      str_ErrorHeader = StrConcat2(Translate("Error during liquid handling"), Translate(" :: "));
      str_ErrorDescription = Translate("Not enough 2nd phase of liquid present");
      str_ErrorCause = Translate("Immersion depth or surface following position below minimal access range");
    }
    if (i_str_ErrorCode == "90")
    {
      str_ErrorHeader = StrConcat2(Translate("Limit curve errors"), Translate(" :: "));
      str_ErrorDescription = Translate("Limit curve not resetable");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "91")
    {
      str_ErrorHeader = StrConcat2(Translate("Limit curve errors"), Translate(" :: "));
      str_ErrorDescription = Translate("Limit curve not programmable");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "92")
    {
      str_ErrorHeader = StrConcat2(Translate("Limit curve errors"), Translate(" :: "));
      str_ErrorDescription = Translate("Limit curve name not found");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "93")
    {
      str_ErrorHeader = StrConcat2(Translate("Limit curve errors"), Translate(" :: "));
      str_ErrorDescription = Translate("Limit curve data incorrect");
      str_ErrorCause = Translate("Calculate data address out of limit curve address range or Syntax error");
    }
    if (i_str_ErrorCode == "94")
    {
      str_ErrorHeader = StrConcat2(Translate("Limit curve errors"), Translate(" :: "));
      str_ErrorDescription = Translate("Not enough memory for limit curve");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "95")
    {
      str_ErrorHeader = StrConcat2(Translate("Limit curve errors"), Translate(" :: "));
      str_ErrorDescription = Translate("Not allowed limit curve index");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "96")
    {
      str_ErrorHeader = StrConcat2(Translate("Limit curve errors"), Translate(" :: "));
      str_ErrorDescription = Translate("Limit curve already stored");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "99")
    {
      str_ErrorHeader = StrConcat2(Translate("Pipetting Head error"), Translate(" :: "));
      str_ErrorDescription = Translate("Pipetting Head error");
      str_ErrorCause = Translate("Return message of the command CH includes a Pipetting Head error");
    }
    if (str_ErrorCause == "")
    {
      o_str_ErrorDescription = StrConcat4(str_ErrorHeader, str_ErrorDescription, Translate(""), Translate(""));
    }
    else
    {
      o_str_ErrorDescription = StrConcat4(str_ErrorHeader, str_ErrorDescription, Translate(" :: "), str_ErrorCause);
    }
  }

  private function _GetErrorDescriptionMainError( variable i_str_ErrorCode, variable & o_str_ErrorDescription ) void {
    private variable str_ErrorDescription;
    private variable str_ErrorCause;
    o_str_ErrorDescription = 0;
    i_str_ErrorCode = StrConcat2(i_str_ErrorCode, Translate(""));
    str_ErrorDescription = Translate("Unknown error");
    str_ErrorCause = Translate("");
    o_str_ErrorDescription = Translate("");
    if (i_str_ErrorCode == "00")
    {
      str_ErrorDescription = Translate("No Error");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "01")
    {
      str_ErrorDescription = Translate("Syntax error");
      str_ErrorCause = Translate("");
    }
    if (i_str_ErrorCode == "02")
    {
      str_ErrorDescription = Translate("Hardware error");
      str_ErrorCause = Translate("drive blocked, low power etc.");
    }
    if (i_str_ErrorCode == "03")
    {
      str_ErrorDescription = Translate("Command not completed");
      str_ErrorCause = Translate("error in previous sequence (not executed)");
    }
    if (i_str_ErrorCode == "04")
    {
      str_ErrorDescription = Translate("Clot detected");
      str_ErrorCause = Translate("LLD not interrupted");
    }
    if (i_str_ErrorCode == "05")
    {
      str_ErrorDescription = Translate("Barcode unreadable");
      str_ErrorCause = Translate("bad or missing barcode");
    }
    if (i_str_ErrorCode == "06")
    {
      str_ErrorDescription = Translate("Too little liquid");
      str_ErrorCause = Translate("liquid surface is not detected");
    }
    if (i_str_ErrorCode == "07")
    {
      str_ErrorDescription = Translate("Tip already fitted");
      str_ErrorCause = Translate("Repeated attempts to fit a tip or iSwap movement with tips");
    }
    if (i_str_ErrorCode == "08")
    {
      str_ErrorDescription = Translate("No Tip");
      str_ErrorCause = Translate("command was started without fitting tip");
    }
    if (i_str_ErrorCode == "09")
    {
      str_ErrorDescription = Translate("No Carrier");
      str_ErrorCause = Translate("load command without carrier");
    }
    if (i_str_ErrorCode == "10")
    {
      str_ErrorDescription = Translate("Not completed");
      str_ErrorCause = Translate("Command in command buffer was aborted due to an error in a previous command, or command stack was deleted");
    }
    if (i_str_ErrorCode == "11")
    {
      str_ErrorDescription = Translate("Dispense with pressure LLD");
      str_ErrorCause = Translate("dispense with pressure LLD is not permitted");
    }
    if (i_str_ErrorCode == "12")
    {
      str_ErrorDescription = Translate("No Teach In Signal");
      str_ErrorCause = Translate("X-Movement to LLD reached maximum allowable position without detecting Teach in signal");
    }
    if (i_str_ErrorCode == "13")
    {
      str_ErrorDescription = Translate("Loading Tray error");
      str_ErrorCause = Translate("position already occupied");
    }
    if (i_str_ErrorCode == "14")
    {
      str_ErrorDescription = Translate("Sequenced aspiration with pressure LLD");
      str_ErrorCause = Translate("sequenced aspiration with pressure LLD is not permitted");
    }
    if (i_str_ErrorCode == "15")
    {
      str_ErrorDescription = Translate("Not allowed parameter combination");
      str_ErrorCause = Translate("i.e. PLLD and dispense or wrong X-drive assignment");
    }
    if (i_str_ErrorCode == "16")
    {
      str_ErrorDescription = Translate("Cover close error");
      str_ErrorCause = Translate("cover is not closed and couldn't be locked");
    }
    if (i_str_ErrorCode == "17")
    {
      str_ErrorDescription = Translate("Aspiration error");
      str_ErrorCause = Translate("aspiration liquid stream error detected");
    }
    if (i_str_ErrorCode == "18")
    {
      str_ErrorDescription = Translate("Wash fluid or waste error");
      str_ErrorCause = Translate("missing wash fluid, or waste of particular washer is full");
    }
    if (i_str_ErrorCode == "19")
    {
      str_ErrorDescription = Translate("Incubation error");
      str_ErrorCause = Translate("incubator temperature out of limit");
    }
    if (i_str_ErrorCode == "20")
    {
      str_ErrorDescription = Translate("TADM measurement error");
      str_ErrorCause = Translate("overshoot of limits during aspiration or dispensation");
    }
    if (i_str_ErrorCode == "21")
    {
      str_ErrorDescription = Translate("No element");
      str_ErrorCause = Translate("expected element not detected");
    }
    if (i_str_ErrorCode == "22")
    {
      str_ErrorDescription = Translate("Element still holding");
      str_ErrorCause = Translate("Get command is sent twice or element is not discarded");
    }
    if (i_str_ErrorCode == "23")
    {
      str_ErrorDescription = Translate("Element lost");
      str_ErrorCause = Translate("expected element is missing (lost)");
    }
    if (i_str_ErrorCode == "24")
    {
      str_ErrorDescription = Translate("Illegal target plate position");
      str_ErrorCause = Translate("over or underflow of iSWAP positions or iSWAP is not in park position during pipetting activities");
    }
    if (i_str_ErrorCode == "25")
    {
      str_ErrorDescription = Translate("Illegal user access");
      str_ErrorCause = Translate("carrier was manually removed or cover is open");
    }
    if (i_str_ErrorCode == "26")
    {
      str_ErrorDescription = Translate("TADM measurement error");
      str_ErrorCause = Translate("exciding of limits during aspiration or dispensation");
    }
    if (i_str_ErrorCode == "27")
    {
      str_ErrorDescription = Translate("Posiition not reachable");
      str_ErrorCause = Translate("position out of mechanical limits using iSWAP, CoRe gripper or PIP-channels");
    }
    if (i_str_ErrorCode == "28")
    {
      str_ErrorDescription = Translate("unexpected LLD");
      str_ErrorCause = Translate("Liquid level is reached before LLD scanning is started");
    }
    if (i_str_ErrorCode == "29")
    {
      str_ErrorDescription = Translate("area already occupied");
      str_ErrorCause = Translate("Its impossible to occupy area because this area is already in use");
    }
    if (i_str_ErrorCode == "30")
    {
      str_ErrorDescription = Translate("impossible to occupy area");
      str_ErrorCause = Translate("Area cant be occupied because is no solution for arm prepositioning");
    }
    if (i_str_ErrorCode == "99")
    {
      str_ErrorDescription = Translate("Slave error");
      str_ErrorCause = Translate("");
    }
    if (str_ErrorCause == "")
    {
      o_str_ErrorDescription = StrConcat4(str_ErrorDescription, Translate(""), Translate(""), Translate(""));
    }
    else
    {
      o_str_ErrorDescription = StrConcat4(str_ErrorDescription, Translate(" :: "), str_ErrorCause, Translate(""));
    }
  }

  function SearchForCLLD_Z( device & ML_STAR, variable i_int_Channel, variable i_flt_TipLength, variable i_flt_ZMin, variable i_flt_LLDSearchHeight, variable i_flt_ImmersionDepth, variable i_int_ImmersionDirection, variable i_int_ZLimit, variable & o_flt_ZCoordinateFound ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable flt_Resolution;
    private variable arr_Params[];
    private variable int_ZH;
    private variable str_ZH;
    private variable int_ZC;
    private variable str_ZC;
    private variable int_ZI;
    private variable str_ZI;
    private variable str_ZJ;
    private variable str_GT;
    private variable str_GL;
    private variable str_ZV;
    private variable str_ZL;
    private variable str_ZR;
    private variable str_ZW;
    private variable int_ParamCount;
    private variable i;
    private variable str_Params;
    private variable str_Command;
    private variable str_ReturnValue;
    private variable flt_NotUsed;
    private variable flt_ZMinPlusTip;
    private variable flt_ZCPlusTip;
    o_flt_ZCoordinateFound = 0;
    o_flt_ZCoordinateFound = 0.0;
    flt_Resolution = 0.01072765;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    arr_Params.SetSize(0);
    flt_ZMinPlusTip = i_flt_ZMin + i_flt_TipLength;
    int_ZH = flt_ZMinPlusTip / flt_Resolution;
    int_ZH = MthRound(int_ZH, 0);
    str_ZH = StrConcat2(int_ZH, Translate(""));
    str_ZH = StrFillLeft(str_ZH, Translate("0"), 5);
    str_ZH = StrConcat2(Translate("zh"), str_ZH);
    arr_Params.AddAsLast(str_ZH);
    flt_ZCPlusTip = i_flt_LLDSearchHeight + i_flt_TipLength;
    int_ZC = flt_ZCPlusTip / flt_Resolution;
    int_ZC = MthRound(int_ZC, 0);
    str_ZC = StrConcat2(int_ZC, Translate(""));
    str_ZC = StrFillLeft(str_ZC, Translate("0"), 5);
    str_ZC = StrConcat2(Translate("zc"), str_ZC);
    arr_Params.AddAsLast(str_ZC);
    int_ZI = i_flt_ImmersionDepth / flt_Resolution;
    int_ZI = MthRound(int_ZI, 0);
    str_ZI = StrConcat2(int_ZI, Translate(""));
    str_ZI = StrFillLeft(str_ZI, Translate("0"), 4);
    str_ZI = StrConcat2(Translate("zi"), str_ZI);
    arr_Params.AddAsLast(str_ZI);
    str_ZJ = StrConcat2(Translate("zj"), i_int_ImmersionDirection);
    arr_Params.AddAsLast(str_ZJ);
    str_GT = StrConcat2(Translate("gt"), Translate("0010"));
    arr_Params.AddAsLast(str_GT);
    str_GL = StrConcat2(Translate("gl"), Translate("0000"));
    arr_Params.AddAsLast(str_GL);
    str_ZV = StrConcat2(Translate("zv"), Translate("12000"));
    if(0){
      str_ZV = StrConcat2(Translate("zv"), Translate("06000"));
    }
    arr_Params.AddAsLast(str_ZV);
    if(0){
      str_ZL = StrConcat2(Translate("zl"), Translate("04500"));
    }
    str_ZL = StrConcat2(Translate("zl"), Translate("02250"));
    arr_Params.AddAsLast(str_ZL);
    str_ZR = StrConcat2(Translate("zr"), Translate("075"));
    arr_Params.AddAsLast(str_ZR);
    str_ZW = StrConcat2(Translate("zw"), i_int_ZLimit);
    arr_Params.AddAsLast(str_ZW);
    int_ParamCount=arr_Params.GetSize();
    str_Params = Translate("");
    {
      for(i = 0; i < int_ParamCount;)
      {
        i = i + 1;
        str_Params = StrConcat4(str_Params, arr_Params.ElementAt( i -1), Translate(""), Translate(""));
      }
    }
    _GetChannelNumber(i_int_Channel);
    str_Command = StrConcat4(Translate("P"), i_int_Channel, Translate("ZL"), Translate(""));
    Trace(str_Command," :: ",str_Params);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    str_Command = StrConcat4(Translate("P"), i_int_Channel, Translate("AA"), Translate(""));
    str_Params = Translate("zj0");
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    str_Command = StrConcat4(Translate("P"), i_int_Channel, Translate("AA"), Translate(""));
    str_Params = Translate("gl0010");
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    str_Command = StrConcat4(Translate("P"), i_int_Channel, Translate("AA"), Translate(""));
    str_Params = Translate("zw3");
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    str_Command = StrConcat4(Translate("P"), i_int_Channel, Translate("AA"), Translate(""));
    str_Params = StrConcat2(Translate("zv"), Translate("12000"));
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    str_Command = StrConcat4(Translate("P"), i_int_Channel, Translate("AA"), Translate(""));
    str_Params = StrConcat2(Translate("zl"), Translate("04500"));
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    _CheckForError(strFunctionName, str_ReturnValue, 1);
    if(0){
      Get_Channel_Position(ML_STAR, i_int_Channel, flt_NotUsed, flt_NotUsed, o_flt_ZCoordinateFound);
    }
    GetStopDiskZCoord(ML_STAR, i_int_Channel, o_flt_ZCoordinateFound);
    o_flt_ZCoordinateFound = o_flt_ZCoordinateFound - i_flt_TipLength;
  }

  function Request_X_Ranges( device & ML_STAR, variable & o_flt_LeftXMin, variable & o_flt_LeftXMax, variable & o_flt_RightXMin, variable & o_flt_RightXMax ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable bol_SimulationMode;
    private variable int_Count;
    private variable str_ReturnValue;
    private variable bol_ParamFound;
    private variable arr_Values[];
    private variable int_Values;
    private variable i;
    o_flt_LeftXMin = 0;
    o_flt_LeftXMax = 0;
    o_flt_RightXMin = 0;
    o_flt_RightXMax = 0;
    o_flt_LeftXMax = 0.0;
    o_flt_LeftXMin = 0.0;
    o_flt_RightXMax = 0.0;
    o_flt_RightXMin = 0.0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    bol_SimulationMode = Util::GetSimulationMode();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _CheckForError(strFunctionName, str_ReturnValue, 1);
    _Parse_Parameter_Multiple(str_ReturnValue, Translate("ru"), 0.1, 5, 4, bol_ParamFound, arr_Values);
    if (bol_ParamFound == 1)
    {
      int_Values=arr_Values.GetSize();
      {
        for(i = 0; i < int_Values;)
        {
          i = i + 1;
          if (i == 1)
          {
            o_flt_LeftXMin=arr_Values.GetAt(1-1);
          }
          if (i == 2)
          {
            o_flt_LeftXMax=arr_Values.GetAt(2-1);
          }
          if (i == 3)
          {
            o_flt_RightXMin=arr_Values.GetAt(3-1);
          }
          if (i == 4)
          {
            o_flt_RightXMax=arr_Values.GetAt(4-1);
          }
        }
      }
    }
  }

  private function _Parse_Parameter_Multiple( variable i_str_ParameterFull, variable i_str_Parameter, variable i_flt_Conversion, variable i_int_TotalDigits, variable i_int_MaxValues, variable & o_bol_ParameterFound, variable & o_arr_flt_Value[] ) void {
    private variable str_Value3;
    private variable int_Remaining;
    private variable str_RegionOfInterest;
    private variable int_ValueNumber;
    private variable int_LoopCount;
    private variable flt_Value2;
    private variable int_StringPosition;
    private variable o_flt_Value;
    private variable int_ChannelCount;
    private variable int_ParamaterLength;
    private variable int_SecondCut;
    private variable int_Count;
    private variable str_Value;
    private variable int_Value2;
    private variable str_Value2;
    o_bol_ParameterFound = 0;
    o_arr_flt_Value.SetSize( 0);
    o_arr_flt_Value.SetSize(0);
    o_bol_ParameterFound = StrReplace(i_str_ParameterFull, i_str_Parameter, i_str_Parameter);
    int_ParamaterLength = StrGetLength(i_str_ParameterFull);
    if (o_bol_ParameterFound == 1)
    {
      int_StringPosition = StrFind(i_str_ParameterFull, i_str_Parameter);
      int_StringPosition = int_StringPosition + 1;
      int_Remaining = int_ParamaterLength - int_StringPosition;
      str_RegionOfInterest = StrMid(i_str_ParameterFull, int_StringPosition, int_Remaining);
      int_ValueNumber = i_int_TotalDigits + 1;
      int_SecondCut = i_int_TotalDigits;
      int_Count = 1;
      {
        int_LoopCount = 0;
        while (1 == 1)
        {
          int_LoopCount = int_LoopCount + 1;
          int_ChannelCount = int_ChannelCount + 1;
          str_Value = StrMid(str_RegionOfInterest, int_Count, int_ValueNumber);
          int_Count = int_Count + int_ValueNumber;
          str_Value2 = StrLeft(str_Value, int_SecondCut);
          int_Value2 = StrIVal(str_Value2);
          flt_Value2 = int_Value2 * i_flt_Conversion;
          o_flt_Value = flt_Value2;
          o_arr_flt_Value.AddAsLast(o_flt_Value);
          str_Value3 = StrRight(str_Value, 1);
          if (str_Value3 != " ")
          {
            if (str_Value3 == "&")
            {
              {
                while (int_ChannelCount < i_int_MaxValues)
                {
                  int_ChannelCount = int_ChannelCount + 1;
                  o_arr_flt_Value.AddAsLast(o_flt_Value);
                }
              }
            }
            break;
          }
        }
      }
    }
  }

  function _MoveRightArmXAbsolute( device & ML_STAR, variable i_flt_X_Position ) void {
    private variable str_ReturnValue;
    private variable flt_X_Position;
    private variable str_FirmwareParam;
    private variable str_FirmwareCMND;
    private variable flt_Resolution_X;
    private variable str_X_Position;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    flt_Resolution_X = 0.1;
    str_FirmwareCMND = StrConcat4(Translate("C0KR"), Translate(""), Translate(""), Translate(""));
    flt_X_Position = i_flt_X_Position / (flt_Resolution_X * 1.0);
    flt_X_Position = MthRound(flt_X_Position, 0);
    str_X_Position = StrConcat2(flt_X_Position, Translate(""));
    str_X_Position = StrFillLeft(str_X_Position, Translate("0"), 5);
    str_FirmwareParam = StrConcat4(Translate("xs"), str_X_Position, Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _CheckForError(strFunctionName, str_ReturnValue, 1);
  }

  private function SearchForCLLD_Y_ARCHIVE( device & ML_STAR, variable i_int_Channel, variable i_flt_DistanceToSearch, variable i_int_DirectionToSearch, variable & o_flt_YCoordinateFound ) variable {
    private variable flt_DistanceToMove;
    private variable flt_ZCoord;
    private variable flt_SlowDownPoint;
    private variable flt_YCoord;
    private variable flt_XCoord;
    private variable ret_bln_CLLDFound;
    private variable int_CLLD_Status;
    private variable flt_DistanceTraveled;
    o_flt_YCoordinateFound = 0;
    o_flt_YCoordinateFound = 0.0;
    ret_bln_CLLDFound = 0;
    flt_DistanceTraveled = 0.0;
    flt_SlowDownPoint = i_flt_DistanceToSearch * 0.8;
    SwitchLLDMeasurement(ML_STAR, 1);
    GetCLLDStatus(ML_STAR, i_int_Channel, int_CLLD_Status);
    if (int_CLLD_Status == 2)
    {
      MECC::TraceComment(Translate("##############################################################################\nCLLD IS NOT TURNED ON!\n##############################################################################"));
      SwitchLLDMeasurement(ML_STAR, 0);
      return (ret_bln_CLLDFound);
    }
    if (int_CLLD_Status == 1)
    {
      MECC::TraceComment(Translate("##############################################################################\nUNEXPECTED CLLD FOUND!!!\n##############################################################################"));
      SwitchLLDMeasurement(ML_STAR, 0);
      return (ret_bln_CLLDFound);
    }
    {
      while (flt_DistanceTraveled < i_flt_DistanceToSearch)
      {
        if (flt_DistanceTraveled < flt_SlowDownPoint)
        {
          flt_DistanceToMove = 0.5;
        }
        else
        {
          flt_DistanceToMove = 0.1;
        }
        Move_Y_Relative(ML_STAR, i_int_Channel, i_int_DirectionToSearch, flt_DistanceToMove);
        GetCLLDStatus(ML_STAR, i_int_Channel, int_CLLD_Status);
        if (int_CLLD_Status == 1)
        {
          Get_Channel_Position(ML_STAR, i_int_Channel, flt_XCoord, flt_YCoord, flt_ZCoord);
          o_flt_YCoordinateFound = flt_YCoord;
          Trace("CLLD Position found:  ","Y Coord:  ",flt_YCoord);
          ret_bln_CLLDFound = 1;
          break;
        }
        flt_DistanceTraveled = flt_DistanceTraveled + flt_DistanceToMove;
      }
    }
    SwitchLLDMeasurement(ML_STAR, 0);
    return (ret_bln_CLLDFound);
  }

  private function SearchForCLLD_X_ARCHIVE( device & ML_STAR, variable i_int_Channel, variable i_flt_DistanceToSearch, variable i_int_DirectionToSearch, variable & o_flt_XCoordinateFound ) variable {
    private variable flt_DistanceToMove;
    private variable flt_ZCoord;
    private variable flt_SlowDownPoint;
    private variable flt_YCoord;
    private variable flt_XCoord;
    private variable ret_bln_CLLDFound;
    private variable int_CLLD_Status;
    private variable flt_DistanceTraveled;
    o_flt_XCoordinateFound = 0;
    o_flt_XCoordinateFound = 0.0;
    ret_bln_CLLDFound = 0;
    flt_DistanceTraveled = 0.0;
    flt_SlowDownPoint = i_flt_DistanceToSearch * 0.8;
    SwitchLLDMeasurement(ML_STAR, 1);
    GetCLLDStatus(ML_STAR, i_int_Channel, int_CLLD_Status);
    if (int_CLLD_Status == 2)
    {
      MECC::TraceComment(Translate("##############################################################################\nCLLD IS NOT TURNED ON!\n##############################################################################"));
      SwitchLLDMeasurement(ML_STAR, 0);
      return (ret_bln_CLLDFound);
    }
    if (int_CLLD_Status == 1)
    {
      MECC::TraceComment(Translate("##############################################################################\nUNEXPECTED CLLD FOUND!!!\n##############################################################################"));
      SwitchLLDMeasurement(ML_STAR, 0);
      return (ret_bln_CLLDFound);
    }
    {
      while (flt_DistanceTraveled < i_flt_DistanceToSearch)
      {
        if (flt_DistanceTraveled < flt_SlowDownPoint)
        {
          flt_DistanceToMove = 0.5;
        }
        else
        {
          flt_DistanceToMove = 0.1;
        }
        Move_X_Relative(ML_STAR, i_int_DirectionToSearch, flt_DistanceToMove);
        GetCLLDStatus(ML_STAR, i_int_Channel, int_CLLD_Status);
        if (int_CLLD_Status == 1)
        {
          Get_Channel_Position(ML_STAR, i_int_Channel, flt_XCoord, flt_YCoord, flt_ZCoord);
          o_flt_XCoordinateFound = flt_XCoord;
          Trace("CLLD Position found:  ","X Coord:  ",flt_XCoord);
          ret_bln_CLLDFound = 1;
          break;
        }
        flt_DistanceTraveled = flt_DistanceTraveled + flt_DistanceToMove;
      }
    }
    SwitchLLDMeasurement(ML_STAR, 0);
    return (ret_bln_CLLDFound);
  }

  function GetStopDiskZCoord( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_ZCoord ) void {
    private variable str_ReturnValue;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable str_FirmwareCMND;
    private variable flt_Resolution_Z;
    private variable flt_ReturnValue;
    private variable str_FW_ReturnPosition;
    private variable int_FW_Position;
    o_flt_ZCoord = 0;
    flt_Resolution_Z = 0.01072765;
    _GetChannelNumber(i_int_CurrentChannel);
    str_FirmwareCMND = StrConcat4(Translate("P"), i_int_CurrentChannel, Translate("RZ"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    if(0){
      _Parse_Parameter_Single(str_ReturnValue, Translate("rz+"), flt_Resolution_Z, 5, bol_ParameterFound, flt_ReturnValue);
    }
    str_FW_ReturnPosition = StrRight(str_ReturnValue, 5);
    int_FW_Position = StrIVal(str_FW_ReturnPosition);
    flt_ReturnValue = int_FW_Position * flt_Resolution_Z;
    flt_ReturnValue = MthRound(flt_ReturnValue, 1);
    Trace("Stop disk Z coord:  ",flt_ReturnValue);
    _CheckForError(strFunctionName, str_ReturnValue, 1);
    o_flt_ZCoord = flt_ReturnValue;
  }

  function MoveMPH96ToBack( device & ML_STAR ) void {
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  function MoveMPH384ToBack( device & ML_STAR ) void {
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  function CheckPlateWithTwoChannels( device & ML_STAR, variable i_flt_XCenter, variable i_flt_YCenter, variable i_flt_ZMinimumSearchHeight, variable i_flt_ZSpeed, variable i_flt_SearchWidth, variable i_flt_MinimumTraverseHeightBegining, variable i_flt_MinimumTraverseHeightEnding, variable i_int_BackChannel, variable i_int_FrontChannel ) variable {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_FWCommand;
    private variable str_Parameters;
    private variable arr_ParameterList[];
    private variable flt_XS;
    private variable int_XS;
    private variable str_XS;
    private variable str_XD;
    private variable flt_YJ;
    private variable int_YJ;
    private variable str_YJ;
    private variable str_YV;
    private variable flt_ZJ;
    private variable int_ZJ;
    private variable str_ZJ;
    private variable flt_ZY;
    private variable int_ZY;
    private variable str_ZY;
    private variable flt_yo;
    private variable int_yo;
    private variable str_yo;
    private variable flt_yg;
    private variable int_yg;
    private variable str_yg;
    private variable str_YW;
    private variable flt_th;
    private variable int_th;
    private variable str_th;
    private variable flt_te;
    private variable int_te;
    private variable str_te;
    private variable int_TotalParameters;
    private variable i;
    private variable str_ReturnValue;
    private variable bool_ParamFound;
    private variable int_ErrorCode;
    private variable ret_WallFound;
    private variable flt_OpenWidth;
    private variable str_FWCommandSet;
    private variable str_ParameterSet;
    private variable str_BackChannel;
    private variable str_FrontChannel;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    ret_WallFound = 0;
    str_FWCommand = Translate("C0ZP");
    str_Parameters = Translate("");
    arr_ParameterList.SetSize(0);
    flt_XS = i_flt_XCenter * 10;
    int_XS = MthCeiling(flt_XS);
    str_XS = StrConcat2(int_XS, Translate(""));
    str_XS = StrFillLeft(str_XS, Translate("0"), 5);
    str_XS = StrConcat2(Translate("xs"), str_XS);
    arr_ParameterList.AddAsLast(str_XS);
    if (i_flt_XCenter > 0)
    {
      str_XD = Translate("xd0");
    }
    else
    {
      str_XD = Translate("xd1");
    }
    arr_ParameterList.AddAsLast(str_XD);
    flt_YJ = i_flt_YCenter * 10;
    int_YJ = MthCeiling(flt_YJ);
    str_YJ = StrConcat2(int_YJ, Translate(""));
    str_YJ = StrFillLeft(str_YJ, Translate("0"), 4);
    str_YJ = StrConcat2(Translate("yj"), str_YJ);
    arr_ParameterList.AddAsLast(str_YJ);
    str_YV = Translate("yv2778");
    arr_ParameterList.AddAsLast(str_YV);
    flt_ZJ = i_flt_ZMinimumSearchHeight * 10;
    int_ZJ = MthCeiling(flt_ZJ);
    str_ZJ = StrConcat2(int_ZJ, Translate(""));
    str_ZJ = StrFillLeft(str_ZJ, Translate("0"), 4);
    str_ZJ = StrConcat2(Translate("zj"), str_ZJ);
    arr_ParameterList.AddAsLast(str_ZJ);
    flt_ZY = i_flt_ZSpeed * 10;
    int_ZY = MthCeiling(flt_ZY);
    str_ZY = StrConcat2(int_ZY, Translate(""));
    str_ZY = StrFillLeft(str_ZY, Translate("0"), 4);
    str_ZY = StrConcat2(Translate("zy"), str_ZY);
    arr_ParameterList.AddAsLast(str_ZY);
    flt_yo = i_flt_SearchWidth * 10;
    int_yo = MthCeiling(flt_yo);
    str_yo = StrConcat2(int_yo, Translate(""));
    str_yo = StrFillLeft(str_yo, Translate("0"), 4);
    str_yo = StrConcat2(Translate("yo"), str_yo);
    arr_ParameterList.AddAsLast(str_yo);
    flt_OpenWidth = i_flt_SearchWidth + 1.0;
    flt_yg = flt_OpenWidth * 10;
    int_yg = MthCeiling(flt_yg);
    str_yg = StrConcat2(int_yg, Translate(""));
    str_yg = StrFillLeft(str_yg, Translate("0"), 4);
    str_yg = StrConcat2(Translate("yg"), str_yg);
    arr_ParameterList.AddAsLast(str_yg);
    str_YW = Translate("yw20");
    arr_ParameterList.AddAsLast(str_YW);
    flt_th = i_flt_MinimumTraverseHeightBegining * 10;
    int_th = MthCeiling(flt_th);
    str_th = StrConcat2(int_th, Translate(""));
    str_th = StrFillLeft(str_th, Translate("0"), 4);
    str_th = StrConcat2(Translate("th"), str_th);
    arr_ParameterList.AddAsLast(str_th);
    flt_te = i_flt_MinimumTraverseHeightEnding * 10;
    int_te = MthCeiling(flt_te);
    str_te = StrConcat2(int_te, Translate(""));
    str_te = StrFillLeft(str_te, Translate("0"), 4);
    str_te = StrConcat2(Translate("te"), str_te);
    arr_ParameterList.AddAsLast(str_te);
    int_TotalParameters=arr_ParameterList.GetSize();
    str_BackChannel = StrConcat2(i_int_BackChannel, Translate(""));
    str_BackChannel = StrFillLeft(str_BackChannel, Translate("0"), 2);
    str_FrontChannel = StrConcat2(i_int_FrontChannel, Translate(""));
    str_FrontChannel = StrFillLeft(str_FrontChannel, Translate("0"), 2);
    {
      for(i = 0; i < int_TotalParameters;)
      {
        i = i + 1;
        str_Parameters = StrConcat2(str_Parameters, arr_ParameterList.ElementAt( i -1));
      }
    }
    str_Parameters = StrConcat8(str_Parameters, Translate("pa"), str_BackChannel, Translate("pb"), str_FrontChannel, Translate(""), Translate(""), Translate(""));
    str_FWCommandSet = Translate("C0ZO");
    str_ParameterSet = StrConcat8(Translate("pa"), str_BackChannel, Translate("pb"), str_FrontChannel, Translate(""), Translate(""), Translate(""), Translate(""));
    Trace("FW Command Set Channels:  ",str_FWCommandSet," : ",str_ParameterSet);
    Trace("FW Command:  ",str_FWCommand," : ",str_Parameters);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _Parse_Parameter_Single(str_ReturnValue, Translate("er"), 1, 2, bool_ParamFound, int_ErrorCode);
    if (int_ErrorCode != 0)
    {
      ret_WallFound = 1;
    }
    _CheckForError(strFunctionName, str_ReturnValue, 0);
    return (ret_WallFound);
  }

  function _GetSlaveError( variable i_str_ReturnValue, variable & o_arr_Channels[], variable & o_arr_SlaveErrors[], variable & o_arr_ErrorDescription[] ) void {
    private variable arr_Values[];
    private variable int_SplitValues;
    private variable i;
    private variable str_Value;
    private variable arr_ChannelErrors[];
    private variable str_ChannelNumber;
    private variable str_ChannelError;
    private variable str_ErrorDescription;
    private variable bln_UseSlaveError;
    o_arr_Channels.SetSize( 0);
    o_arr_SlaveErrors.SetSize( 0);
    o_arr_ErrorDescription.SetSize( 0);
    o_arr_Channels.SetSize(0);
    o_arr_SlaveErrors.SetSize(0);
    o_arr_ErrorDescription.SetSize(0);
    arr_Values = HSLExtensions::String::Split(i_str_ReturnValue, Translate(" "), 1);
    int_SplitValues=arr_Values.GetSize();
    if (int_SplitValues < 1)
    {
      return;
    }
    {
      for(i = 0; i < int_SplitValues;)
      {
        i = i + 1;
        if (i > 1)
        {
          str_Value=arr_Values.GetAt(i-1);
          arr_ChannelErrors = HSLExtensions::String::Split(str_Value, Translate("/"), 1);
          str_ChannelNumber=arr_ChannelErrors.GetAt(1-1);
          str_ChannelNumber = StrLeft(str_ChannelNumber, 2);
          str_ChannelNumber = StrRight(str_ChannelNumber, 1);
          _GetChannelNumber(str_ChannelNumber);
          o_arr_Channels.AddAsLast(str_ChannelNumber);
          str_ChannelError=arr_ChannelErrors.GetAt(2-1);
          str_ChannelError = StrRight(str_ChannelError, 2);
          bln_UseSlaveError = 0;
          if (str_ChannelError == "00")
          {
            str_ChannelError=arr_ChannelErrors.GetAt(1-1);
            str_ChannelError = StrRight(str_ChannelError, 2);
            bln_UseSlaveError = 1;
          }
          o_arr_SlaveErrors.AddAsLast(str_ChannelError);
          if (bln_UseSlaveError == 0)
          {
            _GetErrorDescriptionSlaveError(str_ChannelError, str_ErrorDescription);
          }
          else
          {
            _GetErrorDescriptionMainError(str_ChannelError, str_ErrorDescription);
          }
          o_arr_ErrorDescription.AddAsLast(str_ErrorDescription);
        }
      }
    }
    Util2::Debug::TraceArray_3(Translate("Channel Number                  Slave Error                  Description"), o_arr_Channels, o_arr_SlaveErrors, o_arr_ErrorDescription);
  }

  private function _GetChannelNumber( variable & io_int_ChannelNumber ) void {
    io_int_ChannelNumber = StrConcat2(io_int_ChannelNumber, Translate(""));
    if (io_int_ChannelNumber == "10")
    {
      io_int_ChannelNumber = Translate("A");
      return;
    }
    if (io_int_ChannelNumber == "11")
    {
      io_int_ChannelNumber = Translate("B");
      return;
    }
    if (io_int_ChannelNumber == "12")
    {
      io_int_ChannelNumber = Translate("C");
      return;
    }
    if (io_int_ChannelNumber == "13")
    {
      io_int_ChannelNumber = Translate("D");
      return;
    }
    if (io_int_ChannelNumber == "14")
    {
      io_int_ChannelNumber = Translate("E");
      return;
    }
    if (io_int_ChannelNumber == "15")
    {
      io_int_ChannelNumber = Translate("F");
      return;
    }
    if (io_int_ChannelNumber == "16")
    {
      io_int_ChannelNumber = Translate("G");
      return;
    }
    if (io_int_ChannelNumber == "A")
    {
      io_int_ChannelNumber = Translate("10");
      return;
    }
    if (io_int_ChannelNumber == "B")
    {
      io_int_ChannelNumber = Translate("11");
      return;
    }
    if (io_int_ChannelNumber == "C")
    {
      io_int_ChannelNumber = Translate("12");
      return;
    }
    if (io_int_ChannelNumber == "D")
    {
      io_int_ChannelNumber = Translate("13");
      return;
    }
    if (io_int_ChannelNumber == "E")
    {
      io_int_ChannelNumber = Translate("14");
      return;
    }
    if (io_int_ChannelNumber == "F")
    {
      io_int_ChannelNumber = Translate("15");
      return;
    }
    if (io_int_ChannelNumber == "G")
    {
      io_int_ChannelNumber = Translate("16");
      return;
    }
  }

  function Move_Channels_To_Absolute_Position( device & ML_STAR, variable i_str_ChannelPattern, variable i_flt_MinimumZHeightAtBegining, variable i_flt_X_Position, variable & i_arr_Y_Position[], variable & i_arr_Z_Position[] ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable int_TotalChannels;
    private variable int_ChPatternLength;
    private variable str_FWCommand;
    private variable str_FWParameter;
    private variable int_ChIndex;
    private variable arr_Parameters[];
    private variable arr_ChPattern[];
    private variable str_ChValue;
    private variable int_ChValue;
    private variable str_TM;
    private variable str_XP;
    private variable i_int_X_Position;
    private variable i_str_X_Position;
    private variable str_YP;
    private variable int_TotalYValues;
    private variable int_TotalZValues;
    private variable flt_Y_Position;
    private variable int_Y_Position;
    private variable str_Y_Position;
    private variable str_ZP;
    private variable flt_Z_Position;
    private variable int_Z_Position;
    private variable str_Z_Position;
    private variable str_TH;
    private variable flt_SafeTravelHeight;
    private variable int_SafeTravelHeight;
    private variable str_SafeTravelHeight;
    private variable int_TotalParameters;
    private variable i;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    i_str_ChannelPattern = StrConcat2(i_str_ChannelPattern, Translate(""));
    int_TotalChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    int_ChPatternLength = StrGetLength(i_str_ChannelPattern);
    if (int_ChPatternLength < int_TotalChannels)
    {
      Trace("Channel Pattern:  ",i_str_ChannelPattern);
      ErrRaise(101, Translate("Channel pattern is less than the total number of channels on the system!"));
    }
    int_TotalYValues=i_arr_Y_Position.GetSize();
    if (int_TotalYValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("Y Values"), i_arr_Y_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the Y Positions"));
    }
    int_TotalZValues=i_arr_Z_Position.GetSize();
    if (int_TotalZValues < int_TotalChannels)
    {
      Util2::Debug::TraceArray(Translate("Z Values"), i_arr_Z_Position);
      ErrRaise(101, Translate("There are not enough values in the array for the Z Positions"));
    }
    flt_SafeTravelHeight = i_flt_MinimumZHeightAtBegining;
    str_FWCommand = Translate("C0JM");
    str_FWParameter = Translate("");
    arr_Parameters.SetSize(0);
    arr_ChPattern.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChValue = StrLeft(i_str_ChannelPattern, int_ChIndex);
        str_ChValue = StrRight(str_ChValue, 1);
        int_ChValue = StrIVal(str_ChValue);
        arr_ChPattern.AddAsLast(int_ChValue);
      }
    }
    str_TM = Translate("tm");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_TM = StrConcat2(str_TM, Translate(" "));
        }
        str_TM = StrConcat2(str_TM, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    arr_Parameters.AddAsLast(str_TM);
    str_XP = Translate("xp");
    i_flt_X_Position = i_flt_X_Position * 10;
    i_int_X_Position = MthCeiling(i_flt_X_Position);
    i_str_X_Position = StrConcat2(i_int_X_Position, Translate(""));
    i_str_X_Position = StrFillLeft(i_str_X_Position, Translate("0"), 5);
    str_XP = StrConcat4(str_XP, i_str_X_Position, Translate("&"), Translate(""));
    arr_Parameters.AddAsLast(str_XP);
    str_YP = Translate("yp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalYValues;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_YP = StrConcat2(str_YP, Translate(" "));
        }
        flt_Y_Position=i_arr_Y_Position.GetAt(int_ChIndex-1);
        flt_Y_Position = flt_Y_Position * 10;
        int_Y_Position = MthCeiling(flt_Y_Position);
        str_Y_Position = StrConcat2(int_Y_Position, Translate(""));
        str_Y_Position = StrFillLeft(str_Y_Position, Translate("0"), 4);
        str_YP = StrConcat4(str_YP, str_Y_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_YP);
    str_TH = Translate("th");
    flt_SafeTravelHeight = flt_SafeTravelHeight * 10;
    int_SafeTravelHeight = MthCeiling(flt_SafeTravelHeight);
    str_SafeTravelHeight = StrConcat2(int_SafeTravelHeight, Translate(""));
    str_SafeTravelHeight = StrFillLeft(str_SafeTravelHeight, Translate("0"), 4);
    str_TH = StrConcat4(str_TH, str_SafeTravelHeight, Translate(""), Translate(""));
    arr_Parameters.AddAsLast(str_TH);
    str_ZP = Translate("zp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalZValues;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_ZP = StrConcat2(str_ZP, Translate(" "));
        }
        flt_Z_Position=i_arr_Z_Position.GetAt(int_ChIndex-1);
        flt_Z_Position = flt_Z_Position * 10;
        int_Z_Position = MthCeiling(flt_Z_Position);
        str_Z_Position = StrConcat2(int_Z_Position, Translate(""));
        str_Z_Position = StrFillLeft(str_Z_Position, Translate("0"), 4);
        str_ZP = StrConcat4(str_ZP, str_Z_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_ZP);
    int_TotalParameters=arr_Parameters.GetSize();
    {
      for(i = 0; i < int_TotalParameters;)
      {
        i = i + 1;
        str_FWParameter = StrConcat2(str_FWParameter, arr_Parameters.ElementAt( i -1));
      }
    }
    Trace("FW Command:  ",str_FWCommand," : ",str_FWParameter);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _CheckForError(strFunctionName, str_ReturnValue, 1);
  }

  private function CheckPlateWithTwoChannels_NotUsed( device & ML_STAR, variable i_flt_XCenter, variable i_flt_YCenter, variable i_flt_ZMinimumSearchHeight, variable i_flt_ZSpeed, variable i_flt_SearchWidth, variable i_flt_MinimumTraverseHeightBegining, variable i_flt_MinimumTraverseHeightEnding, variable i_int_BackChannel, variable i_int_FrontChannel ) variable {
    private variable bool_ParamFound;
    private variable i_int_X_Position;
    private variable int_SafeTravelHeight;
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable flt_SafeTravelHeight;
    private variable str_Y_Position;
    private variable str_FWParameter;
    private variable int_Length;
    private variable int_Y_Position;
    private variable flt_ZSpeed;
    private variable i;
    private variable str_TH;
    private variable strFunctionName;
    private variable str_ZP;
    private variable str_FWCommand;
    private variable flt_HalfDistanceY;
    private variable str_Z_Position;
    private variable flt_Y_Position;
    private variable int_TotalParameters;
    private variable str_YP;
    private variable strFunctionName_Cut;
    private variable int_Z_Position;
    private variable str_XP;
    private variable i_str_ChannelPattern;
    private variable str_TM;
    private variable flt_FrontYLocation;
    private variable flt_ZIncremenToMM;
    private variable flt_BackYLocation;
    private variable str_ZV;
    private variable flt_XCenter;
    private variable flt_Z_Position;
    private variable int_ZSpeed;
    private variable int_ErrorCode;
    private variable str_ZSpeed;
    private variable int_TotalChannels;
    private variable int_Count;
    private variable ret_WallFound;
    private variable str_ChValue;
    private variable int_ChValue;
    private variable i_str_X_Position;
    private variable int_ChIndex;
    private variable str_SafeTravelHeight;
    private variable arr_Parameters[];
    private variable arr_ChPattern[];
    private variable i_arr_Y_Position[];
    private variable i_arr_Z_Position1[];
    private variable i_arr_Z_Position2[];
    private variable i_arr_Z_Position3[];
    flt_ZIncremenToMM = 0.01072765;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    ret_WallFound = 0;
    int_TotalChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    i_str_ChannelPattern = Translate("");
    arr_ChPattern.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        arr_ChPattern.AddAsLast(0);
      }
    }
    arr_ChPattern.SetAt(i_int_BackChannel-1, 1);
    arr_ChPattern.SetAt(i_int_FrontChannel-1, 1);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        i_str_ChannelPattern = StrConcat2(i_str_ChannelPattern, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    i_arr_Y_Position.SetSize(0);
    i_arr_Z_Position1.SetSize(0);
    i_arr_Z_Position2.SetSize(0);
    i_arr_Z_Position3.SetSize(0);
    flt_HalfDistanceY = i_flt_SearchWidth / (2 * 1.0);
    flt_BackYLocation = i_flt_YCenter + flt_HalfDistanceY;
    flt_FrontYLocation = i_flt_YCenter - flt_HalfDistanceY;
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        i_arr_Y_Position.AddAsLast(0.0);
        i_arr_Z_Position1.AddAsLast(0.0);
        i_arr_Z_Position2.AddAsLast(0.0);
        i_arr_Z_Position3.AddAsLast(0.0);
      }
    }
    i_arr_Y_Position.SetAt(i_int_BackChannel-1, flt_BackYLocation);
    i_arr_Y_Position.SetAt(i_int_FrontChannel-1, flt_FrontYLocation);
    i_arr_Z_Position1.SetAt(i_int_BackChannel-1, i_flt_MinimumTraverseHeightBegining);
    i_arr_Z_Position1.SetAt(i_int_FrontChannel-1, i_flt_MinimumTraverseHeightBegining);
    i_arr_Z_Position2.SetAt(i_int_BackChannel-1, i_flt_ZMinimumSearchHeight);
    i_arr_Z_Position2.SetAt(i_int_FrontChannel-1, i_flt_ZMinimumSearchHeight);
    i_arr_Z_Position3.SetAt(i_int_BackChannel-1, i_flt_MinimumTraverseHeightEnding);
    i_arr_Z_Position3.SetAt(i_int_FrontChannel-1, i_flt_MinimumTraverseHeightEnding);
    MECC::TraceComment(Translate("Move to start position"));
    flt_SafeTravelHeight = i_flt_MinimumTraverseHeightBegining;
    flt_XCenter = i_flt_XCenter;
    str_FWCommand = Translate("C0JM");
    str_FWParameter = Translate("");
    arr_Parameters.SetSize(0);
    arr_ChPattern.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChValue = StrLeft(i_str_ChannelPattern, int_ChIndex);
        str_ChValue = StrRight(str_ChValue, 1);
        int_ChValue = StrIVal(str_ChValue);
        arr_ChPattern.AddAsLast(int_ChValue);
      }
    }
    str_TM = Translate("tm");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_TM = StrConcat2(str_TM, Translate(" "));
        }
        str_TM = StrConcat2(str_TM, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    arr_Parameters.AddAsLast(str_TM);
    str_XP = Translate("xp");
    flt_XCenter = flt_XCenter * 10;
    i_int_X_Position = MthCeiling(flt_XCenter);
    i_str_X_Position = StrConcat2(i_int_X_Position, Translate(""));
    i_str_X_Position = StrFillLeft(i_str_X_Position, Translate("0"), 5);
    str_XP = StrConcat4(str_XP, i_str_X_Position, Translate("&"), Translate(""));
    arr_Parameters.AddAsLast(str_XP);
    str_YP = Translate("yp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_YP = StrConcat2(str_YP, Translate(" "));
        }
        flt_Y_Position=i_arr_Y_Position.GetAt(int_ChIndex-1);
        flt_Y_Position = flt_Y_Position * 10;
        int_Y_Position = MthCeiling(flt_Y_Position);
        str_Y_Position = StrConcat2(int_Y_Position, Translate(""));
        str_Y_Position = StrFillLeft(str_Y_Position, Translate("0"), 4);
        str_YP = StrConcat4(str_YP, str_Y_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_YP);
    str_TH = Translate("th");
    flt_SafeTravelHeight = flt_SafeTravelHeight * 10;
    int_SafeTravelHeight = MthCeiling(flt_SafeTravelHeight);
    str_SafeTravelHeight = StrConcat2(int_SafeTravelHeight, Translate(""));
    str_SafeTravelHeight = StrFillLeft(str_SafeTravelHeight, Translate("0"), 4);
    str_TH = StrConcat4(str_TH, str_SafeTravelHeight, Translate(""), Translate(""));
    arr_Parameters.AddAsLast(str_TH);
    str_ZP = Translate("zp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_ZP = StrConcat2(str_ZP, Translate(" "));
        }
        flt_Z_Position=i_arr_Z_Position1.GetAt(int_ChIndex-1);
        flt_Z_Position = flt_Z_Position * 10;
        int_Z_Position = MthCeiling(flt_Z_Position);
        str_Z_Position = StrConcat2(int_Z_Position, Translate(""));
        str_Z_Position = StrFillLeft(str_Z_Position, Translate("0"), 4);
        str_ZP = StrConcat4(str_ZP, str_Z_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_ZP);
    int_TotalParameters=arr_Parameters.GetSize();
    {
      for(i = 0; i < int_TotalParameters;)
      {
        i = i + 1;
        str_FWParameter = StrConcat2(str_FWParameter, arr_Parameters.ElementAt( i -1));
      }
    }
    Trace("FW Command:  ",str_FWCommand," : ",str_FWParameter);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _CheckForError(strFunctionName, str_ReturnValue, 1);
    MECC::TraceComment(Translate("Change Z speed and sensitivity"));
    flt_ZSpeed = i_flt_ZSpeed / (flt_ZIncremenToMM * 1.0);
    int_ZSpeed = MthCeiling(flt_ZSpeed);
    str_ZSpeed = StrConcat2(int_ZSpeed, Translate(""));
    str_ZSpeed = StrFillLeft(str_ZSpeed, Translate("0"), 5);
    str_ZV = StrConcat4(Translate("zv"), str_ZSpeed, Translate(""), Translate(""));
    if(0){
      str_FWCommand = StrConcat8(Translate("A1PXZGzr150000zw0010za34600"), str_ZV, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    str_FWCommand = Translate("PXAA");
    str_FWParameter = StrConcat8(Translate("zr005zw1"), str_ZV, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Trace("FW Command:  ",str_FWCommand," : ",str_FWParameter);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    MECC::TraceComment(Translate("Move to tap position"));
    flt_SafeTravelHeight = i_flt_MinimumTraverseHeightBegining;
    flt_XCenter = i_flt_XCenter;
    str_FWCommand = Translate("C0JM");
    str_FWParameter = Translate("");
    arr_Parameters.SetSize(0);
    arr_ChPattern.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChValue = StrLeft(i_str_ChannelPattern, int_ChIndex);
        str_ChValue = StrRight(str_ChValue, 1);
        int_ChValue = StrIVal(str_ChValue);
        arr_ChPattern.AddAsLast(int_ChValue);
      }
    }
    str_TM = Translate("tm");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_TM = StrConcat2(str_TM, Translate(" "));
        }
        str_TM = StrConcat2(str_TM, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    arr_Parameters.AddAsLast(str_TM);
    str_XP = Translate("xp");
    flt_XCenter = flt_XCenter * 10;
    i_int_X_Position = MthCeiling(flt_XCenter);
    i_str_X_Position = StrConcat2(i_int_X_Position, Translate(""));
    i_str_X_Position = StrFillLeft(i_str_X_Position, Translate("0"), 5);
    str_XP = StrConcat4(str_XP, i_str_X_Position, Translate("&"), Translate(""));
    arr_Parameters.AddAsLast(str_XP);
    str_YP = Translate("yp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_YP = StrConcat2(str_YP, Translate(" "));
        }
        flt_Y_Position=i_arr_Y_Position.GetAt(int_ChIndex-1);
        flt_Y_Position = flt_Y_Position * 10;
        int_Y_Position = MthCeiling(flt_Y_Position);
        str_Y_Position = StrConcat2(int_Y_Position, Translate(""));
        str_Y_Position = StrFillLeft(str_Y_Position, Translate("0"), 4);
        str_YP = StrConcat4(str_YP, str_Y_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_YP);
    str_TH = Translate("th");
    flt_SafeTravelHeight = flt_SafeTravelHeight * 10;
    int_SafeTravelHeight = MthCeiling(flt_SafeTravelHeight);
    str_SafeTravelHeight = StrConcat2(int_SafeTravelHeight, Translate(""));
    str_SafeTravelHeight = StrFillLeft(str_SafeTravelHeight, Translate("0"), 4);
    str_TH = StrConcat4(str_TH, str_SafeTravelHeight, Translate(""), Translate(""));
    arr_Parameters.AddAsLast(str_TH);
    str_ZP = Translate("zp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_ZP = StrConcat2(str_ZP, Translate(" "));
        }
        flt_Z_Position=i_arr_Z_Position2.GetAt(int_ChIndex-1);
        flt_Z_Position = flt_Z_Position * 10;
        int_Z_Position = MthCeiling(flt_Z_Position);
        str_Z_Position = StrConcat2(int_Z_Position, Translate(""));
        str_Z_Position = StrFillLeft(str_Z_Position, Translate("0"), 4);
        str_ZP = StrConcat4(str_ZP, str_Z_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_ZP);
    int_TotalParameters=arr_Parameters.GetSize();
    {
      for(i = 0; i < int_TotalParameters;)
      {
        i = i + 1;
        str_FWParameter = StrConcat2(str_FWParameter, arr_Parameters.ElementAt( i -1));
      }
    }
    Trace("FW Command:  ",str_FWCommand," : ",str_FWParameter);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _Parse_Parameter_Single(str_ReturnValue, Translate("er"), 1, 2, bool_ParamFound, int_ErrorCode);
    if (int_ErrorCode != 0)
    {
      ret_WallFound = 1;
    }
    _CheckForError(strFunctionName, str_ReturnValue, 0);
    MECC::TraceComment(Translate("Reset the speed back to normal"));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    MECC::TraceComment(Translate("Move to final position"));
    flt_SafeTravelHeight = i_flt_MinimumTraverseHeightBegining;
    flt_XCenter = i_flt_XCenter;
    str_FWCommand = Translate("C0JM");
    str_FWParameter = Translate("");
    arr_Parameters.SetSize(0);
    arr_ChPattern.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_ChValue = StrLeft(i_str_ChannelPattern, int_ChIndex);
        str_ChValue = StrRight(str_ChValue, 1);
        int_ChValue = StrIVal(str_ChValue);
        arr_ChPattern.AddAsLast(int_ChValue);
      }
    }
    str_TM = Translate("tm");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_TM = StrConcat2(str_TM, Translate(" "));
        }
        str_TM = StrConcat2(str_TM, arr_ChPattern.ElementAt( int_ChIndex -1));
      }
    }
    arr_Parameters.AddAsLast(str_TM);
    str_XP = Translate("xp");
    flt_XCenter = flt_XCenter * 10;
    i_int_X_Position = MthCeiling(flt_XCenter);
    i_str_X_Position = StrConcat2(i_int_X_Position, Translate(""));
    i_str_X_Position = StrFillLeft(i_str_X_Position, Translate("0"), 5);
    str_XP = StrConcat4(str_XP, i_str_X_Position, Translate("&"), Translate(""));
    arr_Parameters.AddAsLast(str_XP);
    str_YP = Translate("yp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_YP = StrConcat2(str_YP, Translate(" "));
        }
        flt_Y_Position=i_arr_Y_Position.GetAt(int_ChIndex-1);
        flt_Y_Position = flt_Y_Position * 10;
        int_Y_Position = MthCeiling(flt_Y_Position);
        str_Y_Position = StrConcat2(int_Y_Position, Translate(""));
        str_Y_Position = StrFillLeft(str_Y_Position, Translate("0"), 4);
        str_YP = StrConcat4(str_YP, str_Y_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_YP);
    str_TH = Translate("th");
    flt_SafeTravelHeight = flt_SafeTravelHeight * 10;
    int_SafeTravelHeight = MthCeiling(flt_SafeTravelHeight);
    str_SafeTravelHeight = StrConcat2(int_SafeTravelHeight, Translate(""));
    str_SafeTravelHeight = StrFillLeft(str_SafeTravelHeight, Translate("0"), 4);
    str_TH = StrConcat4(str_TH, str_SafeTravelHeight, Translate(""), Translate(""));
    arr_Parameters.AddAsLast(str_TH);
    str_ZP = Translate("zp");
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        if (int_ChIndex > 1)
        {
          str_ZP = StrConcat2(str_ZP, Translate(" "));
        }
        flt_Z_Position=i_arr_Z_Position3.GetAt(int_ChIndex-1);
        flt_Z_Position = flt_Z_Position * 10;
        int_Z_Position = MthCeiling(flt_Z_Position);
        str_Z_Position = StrConcat2(int_Z_Position, Translate(""));
        str_Z_Position = StrFillLeft(str_Z_Position, Translate("0"), 4);
        str_ZP = StrConcat4(str_ZP, str_Z_Position, Translate(""), Translate(""));
      }
    }
    arr_Parameters.AddAsLast(str_ZP);
    int_TotalParameters=arr_Parameters.GetSize();
    {
      for(i = 0; i < int_TotalParameters;)
      {
        i = i + 1;
        str_FWParameter = StrConcat2(str_FWParameter, arr_Parameters.ElementAt( i -1));
      }
    }
    Trace("FW Command:  ",str_FWCommand," : ",str_FWParameter);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _CheckForError(strFunctionName, str_ReturnValue, 1);
    return (ret_WallFound);
  }
} // library namespace
