#pragma once
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLTrcLib.hsl"
#include "HSLMappingReport.hsl"
#include "HSLDevLib.hsl"
#include "HSLUtilLib.hsl"
#include "VectorCustomDialogs\\VectorCustomDialogs.hsl"
#include "HSLAppsLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLTimLib.hsl"
#include "FileHandling_HSLFiLibEx\\HSLFilLibEx.hsl"
#include "HSLExtensions\\Array.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLArrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace WORKLIST {
  variable t_int_NumberOfTargetsFromFile;
  variable t_arr_NumberOfSamplePerPool[];
  variable t_arr_SourceWellID[];
  variable t_arr_Disctint_Pool_Well[];
  variable t_arr_Filtered_Source_Well_Concentration[];
  variable t_int_NumberOfSamplesFromFile;
  variable t_arr_TargetWellPositions[];
  function A_WorkList_Read( device & i_MLSTAR, variable i_hdl_InputWorklist, variable i_bln_SetConcentrationFilterOnWorklist, variable i_flt_MinimumConcentration, variable i_flt_MaximumConcentration, sequence i_seq_SourcePlate, sequence & o_seq_SourceAsp, sequence i_seq_TargetPlate, sequence & o_seq_TargetDisp, variable & o_int_NumberOfSamplesFromFile, variable & o_int_NumberOfTargetsFromFile, variable & o_arr_SourceWellPositions[], variable & o_arr_TargetWellPositionsDistinct[] ) void ;
  function B_IntermediateNormalisation( device & i_ML_STAR, variable i_hdl_InputWorklist, variable i_flt_SourceVolume, variable i_flt_IntermediateVolume, variable i_flt_DestinationVolume, variable i_flt_DestinationYield, sequence i_seq_IntermediateLabware, sequence & o_seq_IntermediateDispSequence, variable & i_arr_SourceWellID[], variable & o_arr_IntermediateWellIDs[], variable & o_arr_VolumesSourceToIntermediate[], variable & o_arr_VolumesDiluentToIntermediate[] ) void ;
  function B_NormaliseOnPooling( device & i_MLSTAR, variable i_hdl_InputWorklist, variable i_flt_TargetVolume, variable i_flt_TargetYield, variable & i_arr_SourceWellID[], variable & i_arr_TargetWellID[], variable & o_arr_VolumeSourceArray[], variable & o_arr_VolumeDiluentArray[], variable & o_arr_TargetWellIDs[] ) void ;
  function C_Adapter1( device & i_MLSTAR, variable i_hdl_InputWorklist, variable & i_arr_SourceWellID[], sequence i_seq_AdapterTubesOrPlate, sequence i_seq_AdapterDestPlate, sequence & o_seq_AdapterAsp, sequence & o_seq_AdapterDisp, variable & o_arr_AdapterDistinct[], variable & o_arr_AdapterFrequency[], variable i_bln_UsingMPH, variable & o_str_PlateBacodeUDP ) void ;
  function C_Adapter2( device & i_MLSTAR, variable i_hdl_InputWorklist, variable & i_arr_SourceWellID[], sequence i_seq_Adapter1TubesOrPlate, sequence i_seq_Adapter2TubesOrPlate, sequence i_seq_AdapterDestPlate, sequence & o_seq_Adapter1Asp, sequence & o_seq_Adapter2Asp, sequence & o_seq_AdapterDisp, variable & o_arr_Adapter1Distinct[], variable & o_arr_Adapter2Distinct[], variable & o_arr_Adapter1Frequency[], variable & o_arr_Adapter2Frequency[] ) void ;
  function C_SamplePrep( device & i_MLSTAR, variable i_hdl_InputWorklist, variable & i_arr_SourceWellID[], variable i_bln_FilterSampleType, variable i_str_SampleType, variable i_str_SamplePrep, sequence i_seq_SourceWells, sequence i_seq_TargetWells, sequence & o_seq_SourceWells_SamplePrep, sequence & o_seq_TargetWell_SamplePrep, variable & o_arr_TargetArray_SamplePrep[], variable & o_arr_SourceArray_SamplePrep[], variable & o_int_NumberOfSampleTypeSamples, variable & o_int_NumberOfSamplePrepSamples ) void ;
  function C_SampleType( device & i_MLSTAR, variable i_hdl_InputWorklist, variable & i_arr_SourceWellID[], variable i_str_SampleType, sequence i_seq_SourceWells, sequence i_seq_TargetWells, sequence & o_seq_SourceWells_SampleType, sequence & o_seq_TargetWell_SampleType, variable & o_arr_TargetArray_SampleType[], variable & o_arr_SourceArray_SampleType[], variable & o_int_NumberOfSampleTypeSamples ) void ;
  function C_UMI_Plate( device & i_MLSTAR, variable i_hdl_InputWorklist, variable & i_arr_SourceWellID[], sequence i_seq_AdapterTubesOrPlate, sequence i_seq_AdapterDestPlate, sequence & o_seq_AdapterAsp, sequence & o_seq_AdapterDisp, variable & o_arr_AdapterDistinct[], variable & o_arr_AdapterFrequency[], variable i_bln_UsingMPH ) void ;
  function D_FixedVolumePoolingCalc( variable i_flt_VolumePerSample, variable & o_arr_fltVolumeOfPools[] ) void ;
  function D_PoolingArrays( variable & o_arr_intNumberOfSamplesPerPool[], variable & o_int_NumberOfPools ) void ;
  private function Lookup( variable & array[], variable item ) variable ;
  private function SortOneSequenceAndOneArrayForChannels( sequence & sequence_for_sorting, variable & array[], device & ML_STAR ) void ;
  private function SortTwoSequencesAndOneArrayForChannels( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array[], device & ML_STAR ) void ;
  private function SortTwoSequencesAndTwoArraysForChannels( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array_volume[], variable & array_2[], device & ML_STAR ) void ;
  private function SortTwoSequencesAndTwoStringArraysForChannels( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array_volume[], variable & array_2[], device & ML_STAR ) void ;
  private function _version(  ) void ;
  private function get_distinct_from_array( variable & i_arr[], variable & o_arr[] ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function A_WorkList_Read( device & i_MLSTAR, variable i_hdl_InputWorklist, variable i_bln_SetConcentrationFilterOnWorklist, variable i_flt_MinimumConcentration, variable i_flt_MaximumConcentration, sequence i_seq_SourcePlate, sequence & o_seq_SourceAsp, sequence i_seq_TargetPlate, sequence & o_seq_TargetDisp, variable & o_int_NumberOfSamplesFromFile, variable & o_int_NumberOfTargetsFromFile, variable & o_arr_SourceWellPositions[], variable & o_arr_TargetWellPositionsDistinct[] ) void {
    private variable file1_Source_Well;
    private variable l_str_DummyLabwareId_Asp;
    private variable l_flt_massPerSample;
    private variable l_flt_volumePerSample;
    private variable l_int_NumberOfSamples;
    private variable file1_Target_Well;
    private variable l_str_SQLSentence;
    private variable file1_Source_SampleID;
    private variable loopCounter1;
    private variable l_int_NumberOfDistinctPoolWells;
    private variable loopCounter2;
    private variable l_str_DummyLabwareId_DiluentDisp;
    private variable loopCounter3;
    private variable l_str_DummyLabwareId_Disp;
    private variable l_str_PoolWell_Id;
    private file file1;
    private sequence l_seq_TargetDisp;
    private variable l_arr_TargetWellPositions[];
    private variable file1_Source_Concentration;
    { sequence __temp; o_seq_SourceAsp = __temp; }
    { sequence __temp; o_seq_TargetDisp = __temp; }
    o_int_NumberOfSamplesFromFile = 0;
    o_int_NumberOfTargetsFromFile = 0;
    o_arr_SourceWellPositions.SetSize( 0);
    o_arr_TargetWellPositionsDistinct.SetSize( 0);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: WORKLIST_READ STARTED\n************************************************************************************************************\n"));
    l_flt_massPerSample = 0.0;
    l_flt_volumePerSample = 0.0;
    l_str_DummyLabwareId_DiluentDisp = SeqGetLabwareId(i_seq_TargetPlate);
    l_str_DummyLabwareId_Asp = SeqGetLabwareId(i_seq_SourcePlate);
    l_str_DummyLabwareId_Disp = SeqGetLabwareId(i_seq_TargetPlate);
    file1.AddField("Target_Well", file1_Target_Well, hslString, 255);
    if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslRead, "Select distinct [Target_Well] from [Sheet1$]") )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
    }
    t_arr_Disctint_Pool_Well.SetSize(0);
    t_arr_Filtered_Source_Well_Concentration.SetSize(0);
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        t_arr_Disctint_Pool_Well.AddAsLast(file1_Target_Well);
        Trace("file1_Target_Well: ",file1_Target_Well);
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    l_int_NumberOfDistinctPoolWells=t_arr_Disctint_Pool_Well.GetSize();
    o_int_NumberOfTargetsFromFile = l_int_NumberOfDistinctPoolWells;
    t_int_NumberOfTargetsFromFile = o_int_NumberOfTargetsFromFile;
    t_arr_NumberOfSamplePerPool.SetSize(0);
    t_arr_SourceWellID.SetSize(0);
    l_arr_TargetWellPositions.SetSize(0);
    o_arr_SourceWellPositions.SetSize(0);
    if (i_bln_SetConcentrationFilterOnWorklist == ASWGLOBAL::BOOL::TRUE)
    {
      {
        for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfDistinctPoolWells;)
        {
          loopCounter2 = loopCounter2 + 1;
          l_int_NumberOfSamples = 0;
          l_str_PoolWell_Id=t_arr_Disctint_Pool_Well.GetAt(loopCounter2-1);
          l_str_SQLSentence = StrConcat8(Translate("Select * from [Sheet1$] where [Target_Well] = '"), l_str_PoolWell_Id, Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          Trace("l_str_SQLSentence: ",l_str_SQLSentence);
          file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
          file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
          file1.AddField("Target_Well", file1_Target_Well, hslString, 255);
          file1.AddField("Source_Concentration", file1_Source_Concentration, hslFloat);
          if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslRead, l_str_SQLSentence) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
          }
          {
            loopCounter3 = 0;
            while (
               (file1.Eof() == 0)
            )
            {
              loopCounter3 = loopCounter3 + 1;
              if( 0 == file1.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if (file1_Source_Concentration <= i_flt_MaximumConcentration)
              {
                if (file1_Source_Concentration >= i_flt_MinimumConcentration)
                {
                  l_int_NumberOfSamples = l_int_NumberOfSamples + 1;
                  SeqAdd(o_seq_SourceAsp, l_str_DummyLabwareId_Asp, file1_Source_Well);
                  t_arr_SourceWellID.AddAsLast(file1_Source_Well);
                  SeqAdd(o_seq_TargetDisp, l_str_DummyLabwareId_Disp, l_str_PoolWell_Id);
                  SeqAdd(l_seq_TargetDisp, l_str_DummyLabwareId_Disp, l_str_PoolWell_Id);
                  o_arr_SourceWellPositions.AddAsLast(file1_Source_Well);
                  l_arr_TargetWellPositions.AddAsLast(l_str_PoolWell_Id);
                  t_arr_Filtered_Source_Well_Concentration.AddAsLast(file1_Source_Concentration);
                }
              }
            }
          }
          t_arr_NumberOfSamplePerPool.AddAsLast(l_int_NumberOfSamples);
        }
      }
    }
    else
    {
      {
        for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfDistinctPoolWells;)
        {
          loopCounter2 = loopCounter2 + 1;
          l_int_NumberOfSamples = 0;
          l_str_PoolWell_Id=t_arr_Disctint_Pool_Well.GetAt(loopCounter2-1);
          l_str_SQLSentence = StrConcat8(Translate("Select * from [Sheet1$] where [Target_Well] = '"), l_str_PoolWell_Id, Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          Trace("l_str_SQLSentence: ",l_str_SQLSentence);
          file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
          file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
          file1.AddField("Target_Well", file1_Target_Well, hslString, 255);
          if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslRead, l_str_SQLSentence) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
          }
          {
            loopCounter3 = 0;
            while (
               (file1.Eof() == 0)
            )
            {
              loopCounter3 = loopCounter3 + 1;
              if( 0 == file1.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              l_int_NumberOfSamples = l_int_NumberOfSamples + 1;
              SeqAdd(o_seq_SourceAsp, l_str_DummyLabwareId_Asp, file1_Source_Well);
              t_arr_SourceWellID.AddAsLast(file1_Source_Well);
              SeqAdd(o_seq_TargetDisp, l_str_DummyLabwareId_Disp, l_str_PoolWell_Id);
              SeqAdd(l_seq_TargetDisp, l_str_DummyLabwareId_Disp, l_str_PoolWell_Id);
              o_arr_SourceWellPositions.AddAsLast(file1_Source_Well);
              l_arr_TargetWellPositions.AddAsLast(l_str_PoolWell_Id);
            }
          }
          t_arr_NumberOfSamplePerPool.AddAsLast(l_int_NumberOfSamples);
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    o_seq_SourceAsp.SetCurrentPosition(1);
    o_seq_TargetDisp.SetCurrentPosition(1);
    TrcTraceSequence(o_seq_SourceAsp);
    TrcTraceSequence(o_seq_TargetDisp);
    o_int_NumberOfSamplesFromFile = SeqGetTotal(o_seq_SourceAsp);
    t_int_NumberOfSamplesFromFile = o_int_NumberOfSamplesFromFile;
    Util2::Debug::TraceArray(Translate("t_arr_NumberOfSamplePerPool: "), t_arr_NumberOfSamplePerPool);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    Samples\n************************************************************************************************************\n"));
    TrcTraceSequence(o_seq_SourceAsp);
    Util2::Debug::TraceArray(Translate("o_arr_SampleWellPositions: "), o_arr_SourceWellPositions);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    Targets\n************************************************************************************************************\n"));
    TrcTraceSequence(o_seq_TargetDisp);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    REARRAGANGIN ARRAYS AND SEQUENCES\n************************************************************************************************************\n"));
    SortTwoSequencesAndTwoStringArraysForChannels(o_seq_TargetDisp, o_seq_SourceAsp, l_arr_TargetWellPositions, o_arr_SourceWellPositions, i_MLSTAR);
    TrcTraceSequence(o_seq_SourceAsp);
    Util2::Debug::TraceArray(Translate("o_arr_SampleWellPositions: "), o_arr_SourceWellPositions);
    TrcTraceSequence(o_seq_TargetDisp);
    Util2::Debug::TraceArray(Translate("l_arr_TargetWellPositions: "), l_arr_TargetWellPositions);
    t_arr_TargetWellPositions=l_arr_TargetWellPositions;
    get_distinct_from_array(l_arr_TargetWellPositions, o_arr_TargetWellPositionsDistinct);
    Util2::Debug::TraceArray(Translate("o_arr_TargetWellPositionsDistinct: "), o_arr_TargetWellPositionsDistinct);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: WORKLIST_READ COMPLETED\n************************************************************************************************************\n"));
  }

  private function SortTwoSequencesAndTwoArraysForChannels( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array_volume[], variable & array_2[], device & ML_STAR ) void {
    private variable Unique_y_coordinate;
    private variable lookup_return;
    private variable deltaY;
    private variable LoopsNum;
    private variable disp_labid;
    private variable volume2;
    private variable sql_statement;
    private variable asp_angle;
    private variable seq_sort_file2;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable disp_posid;
    private variable volume;
    private variable array_size;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable Unique_x_coordinate;
    private variable seq_sort_file;
    private variable loopCounter3;
    private variable asp_x_coord;
    private variable asp_y_coord;
    private variable asp_z_coord;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable loopCounter6;
    private file seq_sort;
    private file seq_sort2;
    private variable arr_valuesycoord[];
    private variable arr_valuesdestposid[];
    private variable arr_valuesvol2[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable unique_x_coordinates[];
    private variable arr_valuesvol[];
    private variable arr_valuespdestlabid[];
    private variable arr_valuesPosID[];
    seq_sort_file = "C:\\temp\\dummy.xls";
    seq_sort_file2 = "C:\\temp\\dummy2.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    seq_sort.AddField("volume2", volume2, hslString, 255);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        disp_labid = SeqGetLabwareId(secondary_seq);
        disp_posid = SeqGetPositionId(secondary_seq);
        volume=array_volume.GetAt(loopCounter1-1);
        volume2=array_2.GetAt(loopCounter1-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        SeqIncrement(secondary_seq, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = "SELECT * FROM sheet1 ORDER BY  asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslFloat);
    seq_sort.AddField("volume2", volume2, hslString, 255);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort2.AddField("volume", volume, hslFloat);
    seq_sort2.AddField("volume2", volume2, hslString, 255);
    seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
    }
    Unique_x_coordinate = 0;
    unique_x_coordinates.SetSize(0);
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (asp_x_coord != Unique_x_coordinate)
        {
          unique_x_coordinates.AddAsLast(asp_x_coord);
          Unique_x_coordinate = asp_x_coord;
        }
        if( 0 == seq_sort2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    if( 0 != seq_sort2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort2.RemoveFields();
    array_size=unique_x_coordinates.GetSize();
    SeqRemoveAll(sequence_for_sorting);
    SeqRemoveAll(secondary_seq);
    array_volume.SetSize(0);
    array_2.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < array_size;)
      {
        loopCounter2 = loopCounter2 + 1;
        arr_valuesLabID.SetSize(0);
        arr_valuesPosID.SetSize(0);
        arr_valuesycoord.SetSize(0);
        arr_valuesvol.SetSize(0);
        arr_valuesvol2.SetSize(0);
        arr_valuesprocessed.SetSize(0);
        arr_valuespdestlabid.SetSize(0);
        arr_valuesdestposid.SetSize(0);
        asp_x_coord=unique_x_coordinates.GetAt(loopCounter2-1);
        sql_statement = StrConcat4(Translate("SELECT * FROM [sheet1$] WHERE [asp_X_coord] = "), asp_x_coord, Translate(""), Translate(""));
        seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
        seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
        seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
        seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
        seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
        seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
        seq_sort2.AddField("volume", volume, hslFloat);
        seq_sort2.AddField("volume2", volume2, hslString, 255);
        seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
        seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
        if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1$", hslRead, sql_statement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (seq_sort2.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == seq_sort2.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            arr_valuesLabID.AddAsLast(asp_labid);
            arr_valuesPosID.AddAsLast(asp_pos_id);
            arr_valuesycoord.AddAsLast(asp_y_coord);
            arr_valuesvol.AddAsLast(volume);
            arr_valuesvol2.AddAsLast(volume2);
            arr_valuesprocessed.AddAsLast(0);
            arr_valuespdestlabid.AddAsLast(disp_labid);
            arr_valuesdestposid.AddAsLast(disp_posid);
          }
        }
        {
          loopCounter6 = 0;
          while (1 == 1)
          {
            loopCounter6 = loopCounter6 + 1;
            lookup_return = Lookup(arr_valuesprocessed, 0);
            if (lookup_return == 0)
            {
              break;
            }
            Unique_y_coordinate = 10000000;
            LoopsNum=arr_valuesLabID.GetSize();
            {
              for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
              {
                loopCounter4 = loopCounter4 + 1;
                if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == 0)
                {
                  asp_y_coord=arr_valuesycoord.GetAt(loopCounter4-1);
                  deltaY = Unique_y_coordinate - asp_y_coord;
                  if (deltaY >= 9)
                  {
                    asp_labid=arr_valuesLabID.GetAt(loopCounter4-1);
                    asp_pos_id=arr_valuesPosID.GetAt(loopCounter4-1);
                    disp_labid=arr_valuespdestlabid.GetAt(loopCounter4-1);
                    disp_posid=arr_valuesdestposid.GetAt(loopCounter4-1);
                    volume=arr_valuesvol.GetAt(loopCounter4-1);
                    volume2=arr_valuesvol2.GetAt(loopCounter4-1);
                    SeqAdd(sequence_for_sorting, asp_labid, asp_pos_id);
                    SeqAdd(secondary_seq, disp_labid, disp_posid);
                    Unique_y_coordinate = asp_y_coord;
                    array_volume.AddAsLast(volume);
                    array_2.AddAsLast(volume2);
                    arr_valuesprocessed.SetAt(loopCounter4-1, 1);
                  }
                }
              }
            }
          }
        }
        if( 0 != seq_sort2.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        seq_sort2.RemoveFields();
      }
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
  }

  private function SortOneSequenceAndOneArrayForChannels( sequence & sequence_for_sorting, variable & array[], device & ML_STAR ) void {
    private variable Unique_y_coordinate;
    private variable lookup_return;
    private variable deltaY;
    private variable LoopsNum;
    private variable asp_angle;
    private variable sql_statement;
    private variable seq_sort_file2;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable volume;
    private variable array_size;
    private variable loopCounter1;
    private variable Unique_x_coordinate;
    private variable loopCounter2;
    private variable seq_sort_file;
    private variable asp_y_coord;
    private variable loopCounter3;
    private variable asp_x_coord;
    private variable asp_z_coord;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable loopCounter6;
    private file seq_sort;
    private file seq_sort2;
    private variable arr_valuesycoord[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable unique_x_coordinates[];
    private variable arr_valuesvol[];
    private variable arr_valuesPosID[];
    seq_sort_file = "C:\\temp\\dummy.xls";
    seq_sort_file2 = "C:\\temp\\dummy2.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    sequence_for_sorting.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        volume=array.GetAt(loopCounter1-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = "SELECT * FROM sheet1 ORDER BY  asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort2.AddField("volume", volume, hslString, 255);
    if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
    }
    Unique_x_coordinate = 0;
    unique_x_coordinates.SetSize(0);
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (asp_x_coord != Unique_x_coordinate)
        {
          unique_x_coordinates.AddAsLast(asp_x_coord);
          Unique_x_coordinate = asp_x_coord;
        }
        if( 0 == seq_sort2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    if( 0 != seq_sort2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort2.RemoveFields();
    array_size=unique_x_coordinates.GetSize();
    SeqRemoveAll(sequence_for_sorting);
    array.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < array_size;)
      {
        loopCounter2 = loopCounter2 + 1;
        arr_valuesLabID.SetSize(0);
        arr_valuesPosID.SetSize(0);
        arr_valuesycoord.SetSize(0);
        arr_valuesvol.SetSize(0);
        arr_valuesprocessed.SetSize(0);
        asp_x_coord=unique_x_coordinates.GetAt(loopCounter2-1);
        sql_statement = StrConcat4(Translate("SELECT * FROM [sheet1$] WHERE [asp_X_coord] = "), asp_x_coord, Translate(""), Translate(""));
        seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
        seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
        seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
        seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
        seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
        seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
        seq_sort2.AddField("volume", volume, hslString, 255);
        if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1$", hslRead, sql_statement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (seq_sort2.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == seq_sort2.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            arr_valuesLabID.AddAsLast(asp_labid);
            arr_valuesPosID.AddAsLast(asp_pos_id);
            arr_valuesycoord.AddAsLast(asp_y_coord);
            arr_valuesvol.AddAsLast(volume);
            arr_valuesprocessed.AddAsLast(0);
          }
        }
        {
          loopCounter6 = 0;
          while (1 == 1)
          {
            loopCounter6 = loopCounter6 + 1;
            lookup_return = Lookup(arr_valuesprocessed, 0);
            if (lookup_return == 0)
            {
              break;
            }
            Unique_y_coordinate = 10000000;
            LoopsNum=arr_valuesLabID.GetSize();
            {
              for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
              {
                loopCounter4 = loopCounter4 + 1;
                if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == 0)
                {
                  asp_y_coord=arr_valuesycoord.GetAt(loopCounter4-1);
                  deltaY = Unique_y_coordinate - asp_y_coord;
                  if (deltaY >= 9)
                  {
                    asp_labid=arr_valuesLabID.GetAt(loopCounter4-1);
                    asp_pos_id=arr_valuesPosID.GetAt(loopCounter4-1);
                    volume=arr_valuesvol.GetAt(loopCounter4-1);
                    SeqAdd(sequence_for_sorting, asp_labid, asp_pos_id);
                    Unique_y_coordinate = asp_y_coord;
                    array.AddAsLast(volume);
                    arr_valuesprocessed.SetAt(loopCounter4-1, 1);
                  }
                }
              }
            }
          }
        }
        if( 0 != seq_sort2.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        seq_sort2.RemoveFields();
      }
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    sequence_for_sorting.SetCurrentPosition(1);
  }

  private function SortTwoSequencesAndOneArrayForChannels( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array[], device & ML_STAR ) void {
    private variable Unique_y_coordinate;
    private variable lookup_return;
    private variable deltaY;
    private variable LoopsNum;
    private variable disp_labid;
    private variable asp_angle;
    private variable sql_statement;
    private variable seq_sort_file2;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable disp_posid;
    private variable volume;
    private variable array_size;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable Unique_x_coordinate;
    private variable seq_sort_file;
    private variable loopCounter3;
    private variable asp_x_coord;
    private variable asp_y_coord;
    private variable asp_z_coord;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable loopCounter6;
    private file seq_sort;
    private file seq_sort2;
    private variable arr_valuesycoord[];
    private variable arr_valuesdestposid[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable unique_x_coordinates[];
    private variable arr_valuesvol[];
    private variable arr_valuespdestlabid[];
    private variable arr_valuesPosID[];
    seq_sort_file = "C:\\temp\\dummy.xls";
    seq_sort_file2 = "C:\\temp\\dummy2.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslString, 255);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        disp_labid = SeqGetLabwareId(secondary_seq);
        disp_posid = SeqGetPositionId(secondary_seq);
        volume=array.GetAt(loopCounter1-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        SeqIncrement(secondary_seq, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = "SELECT * FROM sheet1 ORDER BY  asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslString, 255);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort2.AddField("volume", volume, hslString, 255);
    seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
    }
    Unique_x_coordinate = 0;
    unique_x_coordinates.SetSize(0);
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (asp_x_coord != Unique_x_coordinate)
        {
          unique_x_coordinates.AddAsLast(asp_x_coord);
          Unique_x_coordinate = asp_x_coord;
        }
        if( 0 == seq_sort2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    if( 0 != seq_sort2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort2.RemoveFields();
    array_size=unique_x_coordinates.GetSize();
    SeqRemoveAll(sequence_for_sorting);
    SeqRemoveAll(secondary_seq);
    array.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < array_size;)
      {
        loopCounter2 = loopCounter2 + 1;
        arr_valuesLabID.SetSize(0);
        arr_valuesPosID.SetSize(0);
        arr_valuesycoord.SetSize(0);
        arr_valuesvol.SetSize(0);
        arr_valuesprocessed.SetSize(0);
        arr_valuespdestlabid.SetSize(0);
        arr_valuesdestposid.SetSize(0);
        asp_x_coord=unique_x_coordinates.GetAt(loopCounter2-1);
        sql_statement = StrConcat4(Translate("SELECT * FROM [sheet1$] WHERE [asp_X_coord] = "), asp_x_coord, Translate(""), Translate(""));
        seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
        seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
        seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
        seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
        seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
        seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
        seq_sort2.AddField("volume", volume, hslString, 255);
        seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
        seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
        if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1$", hslRead, sql_statement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (seq_sort2.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == seq_sort2.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            arr_valuesLabID.AddAsLast(asp_labid);
            arr_valuesPosID.AddAsLast(asp_pos_id);
            arr_valuesycoord.AddAsLast(asp_y_coord);
            arr_valuesvol.AddAsLast(volume);
            arr_valuesprocessed.AddAsLast(0);
            arr_valuespdestlabid.AddAsLast(disp_labid);
            arr_valuesdestposid.AddAsLast(disp_posid);
          }
        }
        {
          loopCounter6 = 0;
          while (1 == 1)
          {
            loopCounter6 = loopCounter6 + 1;
            lookup_return = Lookup(arr_valuesprocessed, 0);
            if (lookup_return == 0)
            {
              break;
            }
            Unique_y_coordinate = 10000000;
            LoopsNum=arr_valuesLabID.GetSize();
            {
              for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
              {
                loopCounter4 = loopCounter4 + 1;
                if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == 0)
                {
                  asp_y_coord=arr_valuesycoord.GetAt(loopCounter4-1);
                  deltaY = Unique_y_coordinate - asp_y_coord;
                  if (deltaY >= 9)
                  {
                    asp_labid=arr_valuesLabID.GetAt(loopCounter4-1);
                    asp_pos_id=arr_valuesPosID.GetAt(loopCounter4-1);
                    disp_labid=arr_valuespdestlabid.GetAt(loopCounter4-1);
                    disp_posid=arr_valuesdestposid.GetAt(loopCounter4-1);
                    volume=arr_valuesvol.GetAt(loopCounter4-1);
                    SeqAdd(sequence_for_sorting, asp_labid, asp_pos_id);
                    SeqAdd(secondary_seq, disp_labid, disp_posid);
                    Unique_y_coordinate = asp_y_coord;
                    array.AddAsLast(volume);
                    arr_valuesprocessed.SetAt(loopCounter4-1, 1);
                  }
                }
              }
            }
          }
        }
        if( 0 != seq_sort2.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        seq_sort2.RemoveFields();
      }
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
  }

  function D_FixedVolumePoolingCalc( variable i_flt_VolumePerSample, variable & o_arr_fltVolumeOfPools[] ) void {
    private variable l_intNumberOfSamplesForCurrentPool;
    private variable loopCounter1;
    private variable l_fltVolumeOfCurrentPool;
    private variable l_strDescription;
    MECC::TraceComment(Translate("**********************************************************************************************************************************************\n                    WORKLIST:: FIXED SAMPLE VOLUME VARIABLE SAMPLE NUMBER POOLING   STARTED\n**********************************************************************************************************************************************\n"));
    o_arr_fltVolumeOfPools.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < t_int_NumberOfTargetsFromFile;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_intNumberOfSamplesForCurrentPool=t_arr_NumberOfSamplePerPool.GetAt(loopCounter1-1);
        l_fltVolumeOfCurrentPool = l_intNumberOfSamplesForCurrentPool * i_flt_VolumePerSample;
        o_arr_fltVolumeOfPools.AddAsLast(l_fltVolumeOfCurrentPool);
      }
    }
    l_strDescription = StrConcat12(Translate("Target Wells and their resepective Total Volumes following the pooling of variable number of samples."), Translate(" Adding a fixed volume of "), i_flt_VolumePerSample, Translate("uL of each sample into the pool"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    Util2::Debug::TraceArray_2(l_strDescription, t_arr_Disctint_Pool_Well, o_arr_fltVolumeOfPools);
    MECC::TraceComment(Translate("**********************************************************************************************************************************************\n                    WORKLIST:: FIXED SAMPLE VOLUME VARIABLE SAMPLE NUMBER POOLING   COMPLETED\n**********************************************************************************************************************************************\n"));
  }

  private function Lookup( variable & array[], variable item ) variable {
    private variable index;
    private variable lookupreturn;
    lookupreturn = Util::Lookup(array, item, index);
    if (lookupreturn > 0)
    {
      index = index + 1;
      return (index);
    }
    else
    {
      return (0);
    }
  }

  private function get_distinct_from_array( variable & i_arr[], variable & o_arr[] ) void {
    private variable arr_counter;
    private variable rtn_index_arr;
    private variable next_item;
    private variable size_i_arr;
    o_arr.SetSize( 0);
    if(0){
      Util2::Debug::TraceArray(Translate("----------- get Distinct function  ----i_arr "), i_arr);
    }
    size_i_arr=i_arr.GetSize();
    {
      for(arr_counter = 0; arr_counter < size_i_arr;)
      {
        arr_counter = arr_counter + 1;
        next_item=i_arr.GetAt(arr_counter-1);
        rtn_index_arr = Lookup(o_arr, next_item);
        if (rtn_index_arr == 0)
        {
          o_arr.AddAsLast(next_item);
        }
      }
    }
    if(0){
      Util2::Debug::TraceArray(Translate(" ---------- o_arr"), o_arr);
    }
  }

  function B_NormaliseOnPooling( device & i_MLSTAR, variable i_hdl_InputWorklist, variable i_flt_TargetVolume, variable i_flt_TargetYield, variable & i_arr_SourceWellID[], variable & i_arr_TargetWellID[], variable & o_arr_VolumeSourceArray[], variable & o_arr_VolumeDiluentArray[], variable & o_arr_TargetWellIDs[] ) void {
    private variable file1_Source_Well;
    private variable l_flt_massPerSample;
    private variable l_int_ReturnLookUp;
    private variable l_flt_volumePerSample;
    private variable l_int_ReturnLookUp2;
    private variable file1_Target_Well;
    private variable file1_Source_SampleID;
    private variable l_int_CurrentNumberOfSamplesThisPool;
    private variable loopCounter3;
    private file file1;
    private variable l_flt_TotalVolumeSourceCurrentTarget;
    private variable l_intSampleVolumeIndex;
    private variable l_intSourceVolumeIndex;
    private variable l_flt_VolumeCurrentSourceSample;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable l_flt_VolumeCurrentTargetDiluent;
    private variable o_arr_AllTargetWellIDs[];
    private variable l_str_ErrorMessage;
    private variable file1_Source_Concentration;
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: NORMALISE ON POOLING   STARTED\n************************************************************************************************************\n"));
    o_arr_AllTargetWellIDs.SetSize(0);
    file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
    file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
    file1.AddField("Target_Well", file1_Target_Well, hslString, 255);
    file1.AddField("Source_Concentration", file1_Source_Concentration, hslFloat);
    if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
    }
    {
      loopCounter3 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter3 = loopCounter3 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_int_ReturnLookUp = Lookup(i_arr_SourceWellID, file1_Source_Well);
        if (l_int_ReturnLookUp > 0)
        {
          l_int_ReturnLookUp2 = Lookup(i_arr_TargetWellID, file1_Target_Well);
          l_int_CurrentNumberOfSamplesThisPool=t_arr_NumberOfSamplePerPool.GetAt(l_int_ReturnLookUp2-1);
          l_flt_massPerSample = i_flt_TargetYield / (l_int_CurrentNumberOfSamplesThisPool * 1.0);
          l_flt_volumePerSample = l_flt_massPerSample / (file1_Source_Concentration * 1.0);
          if (l_flt_volumePerSample < 1)
          {
            l_str_ErrorMessage = StrConcat8(Translate("The [NormaliseOnPooling] submethod has encountered an error. "), Translate("The sample concentration for sample "), file1_Source_Well, Translate(" is too high given the number of samples, and the target yield set."), Translate("\nThe current settings would result in pipetting "), l_flt_volumePerSample, Translate("uL. As this is below 1uL the method will now abort"), Translate(""));
            VectorCustomDialogs::Initialize();
            VectorCustomDialogs::ErrorDialog(Translate("Normalisation Error"), 0, 0, 0, 0, 0, l_str_ErrorMessage, Translate("Please check your worklist and/or input settings. The method will now abort."));
            VectorCustomDialogs::Terminate();
            abort;
          }
          o_arr_VolumeSourceArray.AddAsLast(l_flt_volumePerSample);
          o_arr_TargetWellIDs.AddAsLast(file1_Target_Well);
        }
      }
    }
    Util2::Debug::TraceArray_3(Translate(" Arrays of Sample Well ID, it's respective Target Well ID, and the volume of Sample added to the Target: "), i_arr_SourceWellID, o_arr_TargetWellIDs, o_arr_VolumeSourceArray);
    l_intSourceVolumeIndex = 0;
    {
      for(loopCounter1 = 0; loopCounter1 < t_int_NumberOfTargetsFromFile;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_int_CurrentNumberOfSamplesThisPool=t_arr_NumberOfSamplePerPool.GetAt(l_int_ReturnLookUp2-1);
        {
          for(loopCounter2 = 0; loopCounter2 < l_int_CurrentNumberOfSamplesThisPool;)
          {
            loopCounter2 = loopCounter2 + 1;
            l_intSourceVolumeIndex = l_intSampleVolumeIndex + 1;
            l_flt_VolumeCurrentSourceSample=o_arr_VolumeSourceArray.GetAt(l_intSourceVolumeIndex-1);
            l_flt_TotalVolumeSourceCurrentTarget = l_flt_TotalVolumeSourceCurrentTarget + l_flt_VolumeCurrentSourceSample;
          }
        }
        l_flt_VolumeCurrentTargetDiluent = i_flt_TargetVolume - l_flt_TotalVolumeSourceCurrentTarget;
        o_arr_VolumeDiluentArray.AddAsLast(l_flt_VolumeCurrentTargetDiluent);
        if (l_flt_VolumeCurrentTargetDiluent < 1)
        {
          l_str_ErrorMessage = StrConcat8(Translate("The [NormaliseOnPooling] submethod has encountered an error. "), Translate("The diluent volume requests for "), i_arr_TargetWellID.ElementAt( loopCounter1 -1), Translate(" is "), l_flt_VolumeCurrentTargetDiluent, Translate("uL. As this is below 1uL the method will now abort."), Translate(""), Translate(""));
          VectorCustomDialogs::Initialize();
          VectorCustomDialogs::ErrorDialog(Translate("Normalisation Error"), 0, 0, 0, 0, 0, l_str_ErrorMessage, Translate("Please check your worklist and/or input settings. The method will now abort."));
          VectorCustomDialogs::Terminate();
          abort;
        }
      }
    }
    Util2::Debug::TraceArray_3(Translate(" Arrays of Target Well, Number of Source samples per Target, and Volume of Diluent for each Target: "), i_arr_TargetWellID, t_arr_NumberOfSamplePerPool, o_arr_VolumeDiluentArray);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: NORMALISE ON POOLING   COMPLETED\n************************************************************************************************************\n"));
  }

  function C_Adapter1( device & i_MLSTAR, variable i_hdl_InputWorklist, variable & i_arr_SourceWellID[], sequence i_seq_AdapterTubesOrPlate, sequence i_seq_AdapterDestPlate, sequence & o_seq_AdapterAsp, sequence & o_seq_AdapterDisp, variable & o_arr_AdapterDistinct[], variable & o_arr_AdapterFrequency[], variable i_bln_UsingMPH, variable & o_str_PlateBacodeUDP ) void {
    private variable file1_Source_Well;
    private variable loopCounter8;
    private variable l_int_NumberOfSamples;
    private variable l_int_CurrentBarcodeThisPool;
    private variable l_str_DummyLabwareId_BarcodeDisp;
    private variable l_int_BarcodeCheckSize;
    private variable l_int_NumberOfDistinctBarcodes;
    private variable file1_Source_SampleID;
    private variable l_int_NumberOfBarcodes;
    private variable l_str_SQLSentence;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable l_str_DummyLabwareId_BarcodeAsp;
    private variable l_str_Barcode;
    private file file1;
    private variable l_arr_Barcodes[];
    private variable l_arr_BarcodeCheck[];
    private variable l_arr_BarcodeCheckDistinct[];
    private variable l_int_ReturnLookUp;
    private variable l_intBarcodeIndex;
    private variable file1_Adapter1;
    private variable l_strErrorMessage;
    private variable l_int_NumberOfAdapters;
    private variable l_str_BarcodeTemp;
    private variable l_arrTempBarcodes[];
    private variable l_int_BarcodeTemp2;
    private variable l_int_BarcodeTemp;
    private variable l_bln_BarcodeTempSortCheck;
    private variable l_int_NumberOfSamplesAdditional;
    private variable l_int_NumberOfSamplesRemaining;
    private variable l_str_WellID_MPH;
    private variable l_int_NumberOfSamplesColumn;
    private variable l_int_NumberOfSamplesSet;
    private variable l_int_StartingBarcode;
    private variable l_arr_BarcodeTempRemade[];
    private variable l_arr_BarcodeTemp[];
    private variable l_arr_BarcodeTempSorted[];
    private variable l_int_SizeArrBarcodes;
    private variable l_int_NumberOfUDPPlateBarcode;
    private variable l_arr_PlateBarcodeDistinct[];
    private variable file1_UDP_Plate;
    private variable l_arr_Plate[];
    { sequence __temp; o_seq_AdapterAsp = __temp; }
    { sequence __temp; o_seq_AdapterDisp = __temp; }
    o_arr_AdapterDistinct.SetSize( 0);
    o_arr_AdapterFrequency.SetSize( 0);
    o_str_PlateBacodeUDP = 0;
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: ADAPTER1   STARTED\n************************************************************************************************************\n"));
    if(0){
      Util2::Debug::TraceSequence(i_seq_AdapterTubesOrPlate);
      Util2::Debug::TraceSequence(i_seq_AdapterDestPlate);
    }
    l_str_DummyLabwareId_BarcodeAsp = SeqGetLabwareId(i_seq_AdapterTubesOrPlate);
    if(0){
      TrcTrace(Translate("l_str_DummyLabwareId_BarcodeAsp: "), l_str_DummyLabwareId_BarcodeAsp);
    }
    l_str_DummyLabwareId_BarcodeDisp = SeqGetLabwareId(i_seq_AdapterDestPlate);
    if(0){
      TrcTrace(Translate("l_str_DummyLabwareId_BarcodeDisp: "), l_str_DummyLabwareId_BarcodeDisp);
    }
    l_arr_Plate.SetSize(0);
    l_arr_Barcodes.SetSize(0);
    l_arr_BarcodeCheckDistinct.SetSize(0);
    file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
    file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
    file1.AddField("Adapter1", file1_Adapter1, hslString, 255);
    file1.AddField("UDP_Plate", file1_UDP_Plate, hslString, 255);
    if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
    }
    l_int_NumberOfSamples = 0;
    {
      loopCounter3 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter3 = loopCounter3 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_int_ReturnLookUp = Lookup(i_arr_SourceWellID, file1_Source_Well);
        if (l_int_ReturnLookUp > 0)
        {
          l_int_NumberOfSamples = l_int_NumberOfSamples + 1;
          l_arr_Barcodes.AddAsLast(file1_Adapter1);
          l_arr_Plate.AddAsLast(file1_UDP_Plate);
          SeqAdd(o_seq_AdapterAsp, l_str_DummyLabwareId_BarcodeAsp, file1_Adapter1);
          SeqAdd(o_seq_AdapterDisp, l_str_DummyLabwareId_BarcodeDisp, file1_Source_Well);
        }
      }
    }
    Util2::Debug::TraceArray_2(Translate(" Array of Samples and their resepective Adapters (1): "), i_arr_SourceWellID, l_arr_Barcodes);
    TrcTraceSequence(o_seq_AdapterAsp);
    TrcTraceSequence(o_seq_AdapterDisp);
    get_distinct_from_array(l_arr_Plate, l_arr_PlateBarcodeDistinct);
    l_int_NumberOfUDPPlateBarcode=l_arr_PlateBarcodeDistinct.GetSize();
    Util2::Debug::TraceArray(Translate("l_arr_PlateBarcodeDistinct: "), l_arr_PlateBarcodeDistinct);
    if (l_int_NumberOfUDPPlateBarcode != 1)
    {
      Trace ("Warning! Number of UDP plates barcode is more than 1: ", l_int_NumberOfUDPPlateBarcode);
    }
    else
    {
      o_str_PlateBacodeUDP=l_arr_PlateBarcodeDistinct.GetAt(1-1);
    }
    if (i_bln_UsingMPH == ASWGLOBAL::BOOL::TRUE)
    {
      l_int_NumberOfSamplesRemaining = l_int_NumberOfSamples % 8;
      if (l_int_NumberOfSamplesRemaining > 0)
      {
        l_int_NumberOfSamplesAdditional = 8 - l_int_NumberOfSamplesRemaining;
        l_int_NumberOfSamplesSet = l_int_NumberOfSamples + l_int_NumberOfSamplesAdditional;
      }
      else
      {
        l_int_NumberOfSamplesSet = l_int_NumberOfSamples;
      }
      l_int_NumberOfSamplesColumn = l_int_NumberOfSamplesSet / (8 * 1.0);
      l_intBarcodeIndex = 0;
      l_arr_BarcodeTemp.SetSize(0);
      l_arr_BarcodeTempSorted.SetSize(0);
      l_arr_BarcodeTempRemade.SetSize(0);
      l_int_SizeArrBarcodes=l_arr_Barcodes.GetSize();
      {
        for(loopCounter8 = 0; loopCounter8 < l_int_SizeArrBarcodes;)
        {
          loopCounter8 = loopCounter8 + 1;
          l_intBarcodeIndex = l_intBarcodeIndex + 1;
          l_int_BarcodeTemp=l_arr_Barcodes.GetAt(l_intBarcodeIndex-1);
          l_int_BarcodeTemp2 = StrMid(l_int_BarcodeTemp, 1, 2);
          l_int_BarcodeTemp2 = StrIVal(l_int_BarcodeTemp2);
          l_arr_BarcodeTemp.AddAsLast(l_int_BarcodeTemp2);
        }
      }
      l_arr_BarcodeTempSorted = HSLExtensions::Array::Sort(l_arr_BarcodeTemp, 1, l_bln_BarcodeTempSortCheck);
      l_int_StartingBarcode=l_arr_BarcodeTempSorted.GetAt(1-1);
      {
        for(loopCounter8 = 0; loopCounter8 < l_int_NumberOfSamplesColumn;)
        {
          loopCounter8 = loopCounter8 + 1;
          l_str_WellID_MPH = StrConcat2(Translate("A"), l_int_StartingBarcode);
          l_arr_BarcodeTempRemade.AddAsLast(l_str_WellID_MPH);
          l_str_WellID_MPH = StrConcat2(Translate("B"), l_int_StartingBarcode);
          l_arr_BarcodeTempRemade.AddAsLast(l_str_WellID_MPH);
          l_str_WellID_MPH = StrConcat2(Translate("C"), l_int_StartingBarcode);
          l_arr_BarcodeTempRemade.AddAsLast(l_str_WellID_MPH);
          l_str_WellID_MPH = StrConcat2(Translate("D"), l_int_StartingBarcode);
          l_arr_BarcodeTempRemade.AddAsLast(l_str_WellID_MPH);
          l_str_WellID_MPH = StrConcat2(Translate("E"), l_int_StartingBarcode);
          l_arr_BarcodeTempRemade.AddAsLast(l_str_WellID_MPH);
          l_str_WellID_MPH = StrConcat2(Translate("F"), l_int_StartingBarcode);
          l_arr_BarcodeTempRemade.AddAsLast(l_str_WellID_MPH);
          l_str_WellID_MPH = StrConcat2(Translate("G"), l_int_StartingBarcode);
          l_arr_BarcodeTempRemade.AddAsLast(l_str_WellID_MPH);
          l_str_WellID_MPH = StrConcat2(Translate("H"), l_int_StartingBarcode);
          l_arr_BarcodeTempRemade.AddAsLast(l_str_WellID_MPH);
          l_int_StartingBarcode = l_int_StartingBarcode + 1;
        }
      }
      Util2::Debug::TraceArray(Translate("l_arr_BarcodeTempSorted: "), l_arr_BarcodeTempSorted);
      Util2::Debug::TraceArray(Translate("l_arr_BarcodeTempRemade: "), l_arr_BarcodeTempRemade);
      l_arr_Barcodes=l_arr_BarcodeTempRemade;
    }
    l_intBarcodeIndex = 0;
    {
      for(loopCounter2 = 0; loopCounter2 < t_int_NumberOfTargetsFromFile;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_arr_BarcodeCheck.SetSize(0);
        {
          for(loopCounter8 = 0; loopCounter8 < t_arr_NumberOfSamplePerPool.ElementAt( loopCounter2 -1);)
          {
            loopCounter8 = loopCounter8 + 1;
            l_intBarcodeIndex = l_intBarcodeIndex + 1;
            l_int_CurrentBarcodeThisPool=l_arr_Barcodes.GetAt(l_intBarcodeIndex-1);
            l_arr_BarcodeCheck.AddAsLast(l_int_CurrentBarcodeThisPool);
          }
        }
        get_distinct_from_array(l_arr_BarcodeCheck, l_arr_BarcodeCheckDistinct);
        Util2::Debug::TraceArray(Translate("l_arr_BarcodeCheckDistinct: "), l_arr_BarcodeCheckDistinct);
        Util2::Debug::TraceArray(Translate("l_arr_BarcodeCheck: "), l_arr_BarcodeCheck);
        l_int_NumberOfDistinctBarcodes=l_arr_BarcodeCheckDistinct.GetSize();
        l_int_BarcodeCheckSize=l_arr_BarcodeCheck.GetSize();
        if (l_int_NumberOfDistinctBarcodes != l_int_BarcodeCheckSize)
        {
          l_strErrorMessage = StrConcat4(Translate("There is a identical adapters/indexes/barcodes used for  target well "), t_arr_TargetWellPositions.ElementAt( l_intBarcodeIndex -1), Translate("\nPlease correct the worklist before attempting to run the method again."), Translate("\n\n The method will now ABORT."));
          VectorCustomDialogs::Initialize();
          VectorCustomDialogs::ErrorDialog(Translate("Adapter Worklist Error"), 0, 0, 0, 0, 0, l_strErrorMessage, Translate(""));
          VectorCustomDialogs::Terminate();
          abort;
        }
        if( 0 != file1.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file1.RemoveFields();
      }
    }
    o_arr_AdapterDistinct.SetSize(0);
    o_arr_AdapterFrequency.SetSize(0);
    get_distinct_from_array(l_arr_Barcodes, o_arr_AdapterDistinct);
    l_int_NumberOfDistinctBarcodes=o_arr_AdapterDistinct.GetSize();
    if(0){
      {
        for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfDistinctBarcodes;)
        {
          loopCounter2 = loopCounter2 + 1;
          l_int_NumberOfBarcodes = 1;
          l_str_Barcode=o_arr_AdapterDistinct.GetAt(loopCounter2-1);
          l_str_SQLSentence = StrConcat8(Translate("Select * from [Sheet1$] where [Adapter1] = "), l_str_Barcode, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          Trace("l_str_SQLSentence: ",l_str_SQLSentence);
          file1.SetExtendedProperties( "IMEX=1");
          file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
          file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
          file1.AddField("Adapter1", file1_Adapter1, hslString, 255);
          if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslAppend, l_str_SQLSentence) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
          }
          {
            loopCounter3 = 0;
            while (
               (file1.Eof() == 0)
            )
            {
              loopCounter3 = loopCounter3 + 1;
              if( 0 == file1.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              l_int_ReturnLookUp = Lookup(i_arr_SourceWellID, l_str_Barcode);
              if (l_int_ReturnLookUp > 0)
              {
                l_int_NumberOfBarcodes = l_int_NumberOfBarcodes + 1;
              }
            }
          }
          o_arr_AdapterFrequency.AddAsLast(l_int_NumberOfBarcodes);
          if( 0 != file1.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          file1.RemoveFields();
        }
      }
    }
    l_int_NumberOfAdapters=l_arr_Barcodes.GetSize();
    l_arrTempBarcodes=l_arr_Barcodes;
    {
      for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfDistinctBarcodes;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_int_NumberOfBarcodes = 0;
        l_str_Barcode=o_arr_AdapterDistinct.GetAt(loopCounter2-1);
        {
          for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfAdapters;)
          {
            loopCounter3 = loopCounter3 + 1;
            l_str_BarcodeTemp=l_arrTempBarcodes.GetAt(loopCounter3-1);
            if (l_str_Barcode == l_str_BarcodeTemp)
            {
              l_arrTempBarcodes.SetAt(loopCounter3-1, Translate("Clear"));
              l_int_NumberOfBarcodes = l_int_NumberOfBarcodes + 1;
            }
          }
        }
        o_arr_AdapterFrequency.AddAsLast(l_int_NumberOfBarcodes);
      }
    }
    Util2::Debug::TraceArray(Translate("l_str_BarcodeTemp: "), l_arrTempBarcodes);
    Util2::Debug::TraceArray_2(Translate("Output Array of Barcodes and their Frequency of Use : "), o_arr_AdapterDistinct, o_arr_AdapterFrequency);
    SeqResetSequenceIndexes(o_seq_AdapterAsp);
    SeqResetSequenceIndexes(o_seq_AdapterDisp);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: ADAPTER1   COMPLETED\n************************************************************************************************************\n"));
  }

  private function _version(  ) void {
  }

  private function SortTwoSequencesAndTwoStringArraysForChannels( sequence & sequence_for_sorting, sequence & secondary_seq, variable & array_volume[], variable & array_2[], device & ML_STAR ) void {
    private variable Unique_y_coordinate;
    private variable deltaY;
    private variable lookup_return;
    private variable LoopsNum;
    private variable volume2;
    private variable disp_labid;
    private variable sql_statement;
    private variable asp_angle;
    private variable seq_sort_file2;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable volume;
    private variable disp_posid;
    private variable array_size;
    private variable loopCounter1;
    private variable seq_sort_file;
    private variable loopCounter2;
    private variable Unique_x_coordinate;
    private variable loopCounter3;
    private variable asp_x_coord;
    private variable asp_y_coord;
    private variable asp_z_coord;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable loopCounter6;
    private file seq_sort;
    private file seq_sort2;
    private variable arr_valuesycoord[];
    private variable arr_valuesdestposid[];
    private variable arr_valuesvol2[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable unique_x_coordinates[];
    private variable arr_valuesvol[];
    private variable arr_valuespdestlabid[];
    private variable arr_valuesPosID[];
    seq_sort_file = "C:\\temp\\dummy.xls";
    seq_sort_file2 = "C:\\temp\\dummy2.xls";
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslString, 255);
    seq_sort.AddField("volume2", volume2, hslString, 255);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        disp_labid = SeqGetLabwareId(secondary_seq);
        disp_posid = SeqGetPositionId(secondary_seq);
        volume=array_volume.GetAt(loopCounter1-1);
        volume2=array_2.GetAt(loopCounter1-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        SeqIncrement(secondary_seq, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    sql_statement = "SELECT * FROM sheet1 ORDER BY  asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", volume, hslString, 255);
    seq_sort.AddField("volume2", volume2, hslString, 255);
    seq_sort.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort2.AddField("volume", volume, hslString, 255);
    seq_sort2.AddField("volume2", volume2, hslString, 255);
    seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
    seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
    if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
    }
    Unique_x_coordinate = 0;
    unique_x_coordinates.SetSize(0);
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (asp_x_coord != Unique_x_coordinate)
        {
          unique_x_coordinates.AddAsLast(asp_x_coord);
          Unique_x_coordinate = asp_x_coord;
        }
        if( 0 == seq_sort2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    if( 0 != seq_sort2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort2.RemoveFields();
    array_size=unique_x_coordinates.GetSize();
    SeqRemoveAll(sequence_for_sorting);
    SeqRemoveAll(secondary_seq);
    array_volume.SetSize(0);
    array_2.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < array_size;)
      {
        loopCounter2 = loopCounter2 + 1;
        arr_valuesLabID.SetSize(0);
        arr_valuesPosID.SetSize(0);
        arr_valuesycoord.SetSize(0);
        arr_valuesvol.SetSize(0);
        arr_valuesvol2.SetSize(0);
        arr_valuesprocessed.SetSize(0);
        arr_valuespdestlabid.SetSize(0);
        arr_valuesdestposid.SetSize(0);
        asp_x_coord=unique_x_coordinates.GetAt(loopCounter2-1);
        sql_statement = StrConcat4(Translate("SELECT * FROM [sheet1$] WHERE [asp_X_coord] = "), asp_x_coord, Translate(""), Translate(""));
        seq_sort2.AddField("asp_lab_id", asp_labid, hslString, 255);
        seq_sort2.AddField("asp_pos_id", asp_pos_id, hslString, 255);
        seq_sort2.AddField("asp_x_coord", asp_x_coord, hslFloat);
        seq_sort2.AddField("asp_y_coord", asp_y_coord, hslFloat);
        seq_sort2.AddField("asp_z_coord", asp_z_coord, hslFloat);
        seq_sort2.AddField("asp_angle", asp_angle, hslFloat);
        seq_sort2.AddField("volume", volume, hslString, 255);
        seq_sort2.AddField("volume2", volume2, hslString, 255);
        seq_sort2.AddField("disp_lab_id", disp_labid, hslString, 255);
        seq_sort2.AddField("disp_pos_id", disp_posid, hslString, 255);
        if( 0 == seq_sort2.Open(seq_sort_file2 + " " + "sheet1$", hslRead, sql_statement) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file2, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (seq_sort2.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == seq_sort2.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            arr_valuesLabID.AddAsLast(asp_labid);
            arr_valuesPosID.AddAsLast(asp_pos_id);
            arr_valuesycoord.AddAsLast(asp_y_coord);
            arr_valuesvol.AddAsLast(volume);
            arr_valuesvol2.AddAsLast(volume2);
            arr_valuesprocessed.AddAsLast(0);
            arr_valuespdestlabid.AddAsLast(disp_labid);
            arr_valuesdestposid.AddAsLast(disp_posid);
          }
        }
        {
          loopCounter6 = 0;
          while (1 == 1)
          {
            loopCounter6 = loopCounter6 + 1;
            lookup_return = Lookup(arr_valuesprocessed, 0);
            if (lookup_return == 0)
            {
              break;
            }
            Unique_y_coordinate = 10000000;
            LoopsNum=arr_valuesLabID.GetSize();
            {
              for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
              {
                loopCounter4 = loopCounter4 + 1;
                if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == 0)
                {
                  asp_y_coord=arr_valuesycoord.GetAt(loopCounter4-1);
                  deltaY = Unique_y_coordinate - asp_y_coord;
                  if (deltaY >= 9)
                  {
                    asp_labid=arr_valuesLabID.GetAt(loopCounter4-1);
                    asp_pos_id=arr_valuesPosID.GetAt(loopCounter4-1);
                    disp_labid=arr_valuespdestlabid.GetAt(loopCounter4-1);
                    disp_posid=arr_valuesdestposid.GetAt(loopCounter4-1);
                    volume=arr_valuesvol.GetAt(loopCounter4-1);
                    volume2=arr_valuesvol2.GetAt(loopCounter4-1);
                    SeqAdd(sequence_for_sorting, asp_labid, asp_pos_id);
                    SeqAdd(secondary_seq, disp_labid, disp_posid);
                    Unique_y_coordinate = asp_y_coord;
                    array_volume.AddAsLast(volume);
                    array_2.AddAsLast(volume2);
                    arr_valuesprocessed.SetAt(loopCounter4-1, 1);
                  }
                }
              }
            }
          }
        }
        if( 0 != seq_sort2.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        seq_sort2.RemoveFields();
      }
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    HSLMapReport::DeleteFile(seq_sort_file2);
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
  }

  function C_SampleType( device & i_MLSTAR, variable i_hdl_InputWorklist, variable & i_arr_SourceWellID[], variable i_str_SampleType, sequence i_seq_SourceWells, sequence i_seq_TargetWells, sequence & o_seq_SourceWells_SampleType, sequence & o_seq_TargetWell_SampleType, variable & o_arr_TargetArray_SampleType[], variable & o_arr_SourceArray_SampleType[], variable & o_int_NumberOfSampleTypeSamples ) void {
    private variable file1_Source_Well;
    private variable l_int_ReturnLookUp;
    private variable l_int_NumberOfSamples;
    private variable file1_Source_SampleID;
    private variable loopCounter3;
    private file file1;
    private variable file1_SampleType;
    private variable l_strMessage;
    private variable file1_Target_Well;
    private variable l_arr_SampleID[];
    private variable l_str_DummyLabwareId_SampleWells;
    private variable l_str_DummyLabwareId_TargetWells;
    { sequence __temp; o_seq_SourceWells_SampleType = __temp; }
    { sequence __temp; o_seq_TargetWell_SampleType = __temp; }
    o_arr_TargetArray_SampleType.SetSize( 0);
    o_arr_SourceArray_SampleType.SetSize( 0);
    o_int_NumberOfSampleTypeSamples = 0;
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: SAMPLE TYPE   STARTED\n************************************************************************************************************\n"));
    TrcTrace4(Translate("*******************************************************************************"), Translate("\n\nSearching Worklist for "), i_str_SampleType, Translate("\n\n*******************************************************************************"));
    l_str_DummyLabwareId_SampleWells = SeqGetLabwareId(i_seq_SourceWells);
    l_str_DummyLabwareId_TargetWells = SeqGetLabwareId(i_seq_TargetWells);
    l_arr_SampleID.SetSize(0);
    file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
    file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
    file1.AddField("Target_Well", file1_Target_Well, hslString, 255);
    file1.AddField("Sample_Type", file1_SampleType, hslString, 255);
    if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
    }
    l_int_NumberOfSamples = 0;
    {
      loopCounter3 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter3 = loopCounter3 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_int_ReturnLookUp = Lookup(i_arr_SourceWellID, file1_Source_Well);
        if (l_int_ReturnLookUp > 0)
        {
          if (file1_SampleType == i_str_SampleType)
          {
            l_int_NumberOfSamples = l_int_NumberOfSamples + 1;
            l_arr_SampleID.AddAsLast(file1_Source_SampleID);
            o_arr_SourceArray_SampleType.AddAsLast(file1_Source_Well);
            o_arr_TargetArray_SampleType.AddAsLast(file1_Target_Well);
            SeqAdd(o_seq_SourceWells_SampleType, l_str_DummyLabwareId_SampleWells, file1_Source_Well);
            SeqAdd(o_seq_TargetWell_SampleType, l_str_DummyLabwareId_TargetWells, file1_Target_Well);
          }
        }
      }
    }
    o_int_NumberOfSampleTypeSamples = l_int_NumberOfSamples;
    TrcTrace(Translate("Number of Sample Type:"), l_int_NumberOfSamples);
    TrcTraceSequence(o_seq_SourceWells_SampleType);
    TrcTraceSequence(o_seq_TargetWell_SampleType);
    SortTwoSequencesAndTwoStringArraysForChannels(o_seq_TargetWell_SampleType, o_seq_SourceWells_SampleType, o_arr_TargetArray_SampleType, o_arr_SourceArray_SampleType, i_MLSTAR);
    l_strMessage = StrConcat4(Translate("Arrays of Sample ID, Source Well IDs, and Target Well IDs for all samples which contain "), i_str_SampleType, Translate(": "), Translate(""));
    Util2::Debug::TraceArray_3(l_strMessage, l_arr_SampleID, o_arr_SourceArray_SampleType, o_arr_TargetArray_SampleType);
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: SAMPLE_TYPE   COMPLETED\n************************************************************************************************************\n"));
  }

  function C_SamplePrep( device & i_MLSTAR, variable i_hdl_InputWorklist, variable & i_arr_SourceWellID[], variable i_bln_FilterSampleType, variable i_str_SampleType, variable i_str_SamplePrep, sequence i_seq_SourceWells, sequence i_seq_TargetWells, sequence & o_seq_SourceWells_SamplePrep, sequence & o_seq_TargetWell_SamplePrep, variable & o_arr_TargetArray_SamplePrep[], variable & o_arr_SourceArray_SamplePrep[], variable & o_int_NumberOfSampleTypeSamples, variable & o_int_NumberOfSamplePrepSamples ) void {
    private variable file1_Sample_Prep;
    private variable file1_Source_Well;
    private variable l_int_ReturnLookUp;
    private variable l_strMessage;
    private variable file1_SampleType;
    private variable l_str_DummyLabwareId_SampleWells;
    private variable file1_Target_Well;
    private variable file1_Source_SampleID;
    private variable l_str_DummyLabwareId_TargetWells;
    private variable loopCounter3;
    private file file1;
    private variable l_arr_SampleID[];
    private variable l_int_NumberOfSamplesPrep;
    private variable l_int_NumberOfSamplesType;
    { sequence __temp; o_seq_SourceWells_SamplePrep = __temp; }
    { sequence __temp; o_seq_TargetWell_SamplePrep = __temp; }
    o_arr_TargetArray_SamplePrep.SetSize( 0);
    o_arr_SourceArray_SamplePrep.SetSize( 0);
    o_int_NumberOfSampleTypeSamples = 0;
    o_int_NumberOfSamplePrepSamples = 0;
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: SAMPLE PREP   STARTED\n************************************************************************************************************\n"));
    TrcTrace4(Translate("*******************************************************************************"), Translate("\n\nSearching Worklist for "), i_str_SamplePrep, Translate("\n\n*******************************************************************************"));
    l_str_DummyLabwareId_SampleWells = SeqGetLabwareId(i_seq_SourceWells);
    l_str_DummyLabwareId_TargetWells = SeqGetLabwareId(i_seq_TargetWells);
    l_arr_SampleID.SetSize(0);
    file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
    file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
    file1.AddField("Target_Well", file1_Target_Well, hslString, 255);
    file1.AddField("Sample_Type", file1_SampleType, hslString, 255);
    file1.AddField("Sample_Prep", file1_Sample_Prep, hslString, 255);
    if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
    }
    l_int_NumberOfSamplesType = 0;
    l_int_NumberOfSamplesPrep = 0;
    {
      loopCounter3 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter3 = loopCounter3 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_int_ReturnLookUp = Lookup(i_arr_SourceWellID, file1_Source_Well);
        if (l_int_ReturnLookUp > 0)
        {
          if (i_bln_FilterSampleType == ASWGLOBAL::BOOL::TRUE)
          {
            if (file1_SampleType == i_str_SampleType)
            {
              l_int_NumberOfSamplesType = l_int_NumberOfSamplesType + 1;
              if (file1_Sample_Prep == i_str_SamplePrep)
              {
                l_int_NumberOfSamplesPrep = l_int_NumberOfSamplesPrep + 1;
                l_arr_SampleID.AddAsLast(file1_Source_SampleID);
                o_arr_SourceArray_SamplePrep.AddAsLast(file1_Source_Well);
                o_arr_TargetArray_SamplePrep.AddAsLast(file1_Target_Well);
                SeqAdd(o_seq_SourceWells_SamplePrep, l_str_DummyLabwareId_SampleWells, file1_Source_Well);
                SeqAdd(o_seq_TargetWell_SamplePrep, l_str_DummyLabwareId_TargetWells, file1_Target_Well);
              }
            }
          }
          else
          {
            if (file1_Sample_Prep == i_str_SamplePrep)
            {
              l_int_NumberOfSamplesPrep = l_int_NumberOfSamplesPrep + 1;
              l_arr_SampleID.AddAsLast(file1_Source_SampleID);
              o_arr_SourceArray_SamplePrep.AddAsLast(file1_Source_Well);
              o_arr_TargetArray_SamplePrep.AddAsLast(file1_Target_Well);
              SeqAdd(o_seq_SourceWells_SamplePrep, l_str_DummyLabwareId_SampleWells, file1_Source_Well);
              SeqAdd(o_seq_TargetWell_SamplePrep, l_str_DummyLabwareId_TargetWells, file1_Target_Well);
            }
          }
        }
      }
    }
    o_int_NumberOfSampleTypeSamples = l_int_NumberOfSamplesType;
    TrcTrace(Translate("o_int_NumberOfSampleTypeSamples: "), o_int_NumberOfSampleTypeSamples);
    o_int_NumberOfSamplePrepSamples = l_int_NumberOfSamplesPrep;
    TrcTrace(Translate("o_int_NumberOfSamplePrepSamples: "), o_int_NumberOfSamplePrepSamples);
    TrcTraceSequence(o_seq_SourceWells_SamplePrep);
    TrcTraceSequence(o_seq_TargetWell_SamplePrep);
    SortTwoSequencesAndTwoStringArraysForChannels(o_seq_SourceWells_SamplePrep, o_seq_TargetWell_SamplePrep, o_arr_SourceArray_SamplePrep, o_arr_TargetArray_SamplePrep, i_MLSTAR);
    if (i_bln_FilterSampleType == ASWGLOBAL::BOOL::TRUE)
    {
      StrConcat8(Translate("Arrays of Sample ID, Source Well IDs, and Target Well IDs for all samples which contain "), i_str_SampleType, Translate(" and "), i_str_SamplePrep, Translate(":"), Translate(""), Translate(""), Translate(""));
    }
    else
    {
      l_strMessage = StrConcat4(Translate("Arrays of Sample ID, Source Well IDs, and Target Well IDs for all samples which contain "), i_str_SamplePrep, Translate(": "), Translate(""));
    }
    TrcTrace(Translate(""), l_strMessage);
    Util2::Debug::TraceArray(Translate("****     SAMPLE ID    ****"), l_arr_SampleID);
    Util2::Debug::TraceArray(Translate("****     SOURCE WELL ID    ****"), o_arr_SourceArray_SamplePrep);
    Util2::Debug::TraceArray(Translate("****     TARGET WELL ID    ****"), o_arr_TargetArray_SamplePrep);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: SAMPLE PREP   COMPLETED\n************************************************************************************************************\n"));
  }

  function B_IntermediateNormalisation( device & i_ML_STAR, variable i_hdl_InputWorklist, variable i_flt_SourceVolume, variable i_flt_IntermediateVolume, variable i_flt_DestinationVolume, variable i_flt_DestinationYield, sequence i_seq_IntermediateLabware, sequence & o_seq_IntermediateDispSequence, variable & i_arr_SourceWellID[], variable & o_arr_IntermediateWellIDs[], variable & o_arr_VolumesSourceToIntermediate[], variable & o_arr_VolumesDiluentToIntermediate[] ) void {
    private variable l_str_ErrorMessage;
    private variable file1_Source_Well;
    private variable l_flt_MinimumSourceConcentrationRounded;
    private variable l_int_ReturnLookUp;
    private variable l_IntermediateLabwareID;
    private variable l_flt_IntermediateVolumeRounded;
    private variable l_flt_IntermediateYield;
    private variable l_flt_MinimumSourceConcentration;
    private variable file1_Target_Well;
    private variable l_flt_MaximumSourceConcentration;
    private variable l_flt_DiluentVolume;
    private variable file1_Source_SampleID;
    private variable loopCounter3;
    private variable l_rtn_Value;
    private variable l_flt_SourceVolume;
    private variable l_flt_DestinationYieldRounded;
    private file file1;
    private variable file1_Source_Concentration;
    private variable l_flt_CalculatedSourceVolume;
    private variable l_flt_CalculatedDiluentVolume;
    private file file2;
    private variable l_strOutputFilePath;
    private variable l_strTime;
    private variable l_strDate;
    private variable l_strDiluentVolume;
    private variable l_strSource_SampleID;
    private variable l_strSource_Well;
    private variable l_strSourceVolume;
    private variable l_strCalculatedSourceVolume;
    private variable l_strSource_Concentration;
    private variable l_strTarget_Well;
    private variable l_strCalculatedDiluentVolume;
    private variable l_flt_MaximumSourceConcentrationRounded;
    private variable l_flt_tempDestinationVolume;
    private variable l_fltIntermediateC1V1;
    private variable l_flt_TotalIntermediateYield;
    private variable l_flt_MaxSourceVolume;
    private variable l_flt_IntermediateConcentration;
    { sequence __temp; o_seq_IntermediateDispSequence = __temp; }
    o_arr_IntermediateWellIDs.SetSize( 0);
    o_arr_VolumesSourceToIntermediate.SetSize( 0);
    o_arr_VolumesDiluentToIntermediate.SetSize( 0);
    VectorCustomDialogs::Initialize();
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: INTERMEDIATE NORMALISATION   STARTED\n************************************************************************************************************\n"));
    o_arr_VolumesSourceToIntermediate.SetSize(0);
    o_arr_VolumesDiluentToIntermediate.SetSize(0);
    l_IntermediateLabwareID = SeqGetLabwareId(i_seq_IntermediateLabware);
    l_strDate = TimGetFormattedDate(Translate("%y_%m_%d"));
    l_strTime = TimGetFormattedTime(Translate("%H_%M_%S"));
    l_strOutputFilePath = StrConcat8(Translate("C:\\Program Files (x86)\\HAMILTON\\LogFiles\\"), l_strDate, Translate("_"), l_strTime, Translate("_"), Translate("Normalization_Output_File"), Translate(".xls"), Translate(""));
    TrcTrace(Translate("Normalization Output File (l_strOutputFilePath): "), l_strOutputFilePath);
    file2.AddField("Source_SampleID", l_strSource_SampleID, hslString, 255);
    file2.AddField("Source_Well", l_strSource_Well, hslString, 255);
    file2.AddField("Target_Well", l_strTarget_Well, hslString, 255);
    file2.AddField("Source_Concentration", l_strSource_Concentration, hslString, 255);
    file2.AddField("Calculated_SourceVolume", l_strCalculatedSourceVolume, hslString, 255);
    file2.AddField("Used_SourceVolume", l_strSourceVolume, hslString, 255);
    file2.AddField("Calculated_DiluentVolume", l_strCalculatedDiluentVolume, hslString, 255);
    file2.AddField("Used_DiluentVolume", l_strDiluentVolume, hslString, 255);
    if( 0 == file2.Open(l_strOutputFilePath + " " + "NormalizationReport", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, l_strOutputFilePath, "HxMetEdCompCmd");
    }
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
    file2.AddField("Source_SampleID", l_strSource_SampleID, hslString, 255);
    file2.AddField("Source_Well", l_strSource_Well, hslString, 255);
    file2.AddField("Target_Well", l_strTarget_Well, hslString, 255);
    file2.AddField("Source_Concentration", l_strSource_Concentration, hslString, 255);
    file2.AddField("Calculated_SourceVolume", l_strCalculatedSourceVolume, hslString, 255);
    file2.AddField("Used_SourceVolume", l_strSourceVolume, hslString, 255);
    file2.AddField("Calculated_DiluentVolume", l_strCalculatedDiluentVolume, hslString, 255);
    file2.AddField("Used_DiluentVolume", l_strDiluentVolume, hslString, 255);
    if( 0 == file2.Open(l_strOutputFilePath + " " + "NormalizationReport$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, l_strOutputFilePath, "HxMetEdCompCmd");
    }
    file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
    file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
    file1.AddField("Target_Well", file1_Target_Well, hslString, 255);
    file1.AddField("Source_Concentration", file1_Source_Concentration, hslFloat);
    if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
    }
    l_flt_IntermediateYield = i_flt_IntermediateVolume / (i_flt_DestinationVolume * 1.0);
    l_flt_IntermediateYield = l_flt_IntermediateYield * i_flt_DestinationYield;
    TrcTrace(Translate("l_flt_IntermediateYield: "), l_flt_IntermediateYield);
    if(0){
      l_flt_MaximumSourceConcentration = l_flt_IntermediateYield;
    }
    l_flt_MaximumSourceConcentration = l_flt_IntermediateYield / (2 * 1.0);
    TrcTrace(Translate("l_flt_MaximumSourceConcentration: "), l_flt_MaximumSourceConcentration);
    if(0){
      l_flt_MinimumSourceConcentration = l_flt_IntermediateYield / (i_flt_DestinationVolume * 1.0);
    }
    l_flt_tempDestinationVolume = i_flt_DestinationVolume / (2 * 1.0);
    l_flt_MinimumSourceConcentration = l_flt_IntermediateYield / (l_flt_tempDestinationVolume * 1.0);
    TrcTrace(Translate("l_flt_MinimumSourceConcentration: "), l_flt_MinimumSourceConcentration);
    l_flt_IntermediateConcentration = i_flt_DestinationYield / (i_flt_DestinationVolume * 1.0);
    l_flt_TotalIntermediateYield = l_flt_IntermediateConcentration * i_flt_IntermediateVolume;
    {
      loopCounter3 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter3 = loopCounter3 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_int_ReturnLookUp = Lookup(i_arr_SourceWellID, file1_Source_Well);
        if (l_int_ReturnLookUp > 0)
        {
          l_flt_SourceVolume = l_flt_IntermediateYield / (file1_Source_Concentration * 1.0);
          l_flt_SourceVolume = MthRound(l_flt_SourceVolume, 2);
          l_flt_CalculatedSourceVolume = l_flt_SourceVolume;
          l_strCalculatedSourceVolume = APPSLIB::StrConvertToString(l_flt_CalculatedSourceVolume);
          l_flt_DiluentVolume = i_flt_IntermediateVolume - l_flt_SourceVolume;
          l_flt_DiluentVolume = MthRound(l_flt_DiluentVolume, 2);
          l_flt_CalculatedDiluentVolume = l_flt_DiluentVolume;
          l_strCalculatedDiluentVolume = APPSLIB::StrConvertToString(l_flt_CalculatedDiluentVolume);
          l_flt_MaxSourceVolume = i_flt_IntermediateVolume - 2;
          l_fltIntermediateC1V1 = i_flt_IntermediateVolume * l_flt_IntermediateConcentration;
          l_flt_MaximumSourceConcentration = l_fltIntermediateC1V1 / (2 * 1.0);
          l_flt_MaximumSourceConcentrationRounded = MthRound(l_flt_MaximumSourceConcentration, 2);
          l_flt_MinimumSourceConcentration = l_fltIntermediateC1V1 / (l_flt_MaxSourceVolume * 1.0);
          l_flt_MinimumSourceConcentrationRounded = MthRound(l_flt_MinimumSourceConcentration, 2);
          l_flt_DestinationYieldRounded = MthRound(i_flt_DestinationYield, 0);
          l_flt_IntermediateVolumeRounded = MthRound(i_flt_IntermediateVolume, 2);
          if (l_flt_SourceVolume < 2)
          {
            l_str_ErrorMessage = StrConcat8(Translate("An error has occured during the Normalisation. \n \nThe user has input a Destination Yield of "), l_flt_DestinationYieldRounded, Translate("(x)g and an Intermediate Volume of "), l_flt_IntermediateVolumeRounded, Translate("uL. \n \nThese settings require that the maximum concentration of Source samples obtained from the input worklist must not be greater than "), l_flt_MaximumSourceConcentrationRounded, Translate("(x)g/uL. "), Translate("A Source concentration higher than the maximum permitted given the input settings has been detected."));
            l_str_ErrorMessage = StrConcat8(l_str_ErrorMessage, Translate("\n The sample affected is Source Well:"), file1_Source_Well, Translate("."), Translate(""), Translate("\n \nClick 'OK' to continue but taking the minimum volume (2uL) of this sample."), Translate(" Please be aware by selecting OK this sample will not be normalised to the same concentration as the other samples"), Translate("\n \nClick 'Cancel' to abort the method and review the input worklist"));
            l_rtn_Value = VectorCustomDialogs::MessageDialog(Translate("Worklist sample concentration error warning"), 0, 1, 0, 0, 0, l_str_ErrorMessage);
            TrcTrace(Translate("Concentration Warning dialogue closed with: "), l_rtn_Value);
            if (l_rtn_Value == 1)
            {
              l_flt_SourceVolume = 2.0;
              l_flt_DiluentVolume = i_flt_IntermediateVolume - l_flt_SourceVolume;
              o_arr_VolumesSourceToIntermediate.AddAsLast(l_flt_SourceVolume);
              o_arr_VolumesDiluentToIntermediate.AddAsLast(l_flt_DiluentVolume);
              SeqAdd(o_seq_IntermediateDispSequence, l_IntermediateLabwareID, file1_Source_Well);
            }
            else
            {
              abort;
            }
          }
          else
          {
            if (l_flt_SourceVolume > l_flt_MaxSourceVolume)
            {
              l_str_ErrorMessage = StrConcat8(Translate("An error has occured during the Normalisation. \n \nThe user has input a Destination Yield of "), l_flt_DestinationYieldRounded, Translate("(x)g and an Intermediate Volume of "), l_flt_IntermediateVolumeRounded, Translate("uL. \n \nThese settings require that the minimum concentration of Source samples obtained from the input worklist must not be less than "), l_flt_MinimumSourceConcentrationRounded, Translate("(x)g/uL. "), Translate("A Source concentration lower than the minimum permitted given the input settings has been detected."));
              l_str_ErrorMessage = StrConcat8(l_str_ErrorMessage, Translate("\n The sample affected is Source Well:"), file1_Source_Well, Translate("."), Translate(""), Translate("\n \nClick 'OK' to continue but taking the maximum volume possible of this sample."), Translate(" Please be aware by selecting OK this sample will not be normalised to the same concentration as the other samples"), Translate("\n \nClick 'Cancel' to abort the method and review the input worklist"));
              l_rtn_Value = VectorCustomDialogs::MessageDialog(Translate("Worklist sample concentration error warning"), 0, 1, 0, 0, 0, l_str_ErrorMessage);
              TrcTrace(Translate("Concentration Warning dialogue closed with: "), l_rtn_Value);
              if (l_rtn_Value == 1)
              {
                if (i_flt_IntermediateVolume > i_flt_SourceVolume)
                {
                  l_flt_SourceVolume = i_flt_SourceVolume;
                  l_flt_DiluentVolume = i_flt_IntermediateVolume - i_flt_SourceVolume;
                }
                else
                {
                  l_flt_SourceVolume = i_flt_IntermediateVolume;
                  l_flt_DiluentVolume = 0;
                }
                o_arr_VolumesSourceToIntermediate.AddAsLast(l_flt_SourceVolume);
                if (l_flt_DiluentVolume > 0)
                {
                  o_arr_VolumesDiluentToIntermediate.AddAsLast(l_flt_DiluentVolume);
                  SeqAdd(o_seq_IntermediateDispSequence, l_IntermediateLabwareID, file1_Source_Well);
                }
              }
              else
              {
                abort;
              }
            }
            else
            {
              o_arr_VolumesSourceToIntermediate.AddAsLast(l_flt_SourceVolume);
              o_arr_VolumesDiluentToIntermediate.AddAsLast(l_flt_DiluentVolume);
              SeqAdd(o_seq_IntermediateDispSequence, l_IntermediateLabwareID, file1_Source_Well);
            }
          }
          l_strSource_Concentration = APPSLIB::StrConvertToString(file1_Source_Concentration);
          TrcTrace(Translate("l_strSource_Concentration: "), l_strSource_Concentration);
          l_strSource_SampleID = APPSLIB::StrConvertToString(file1_Source_SampleID);
          TrcTrace(Translate("l_strSource_SampleID: "), l_strSource_SampleID);
          l_strSource_Well = APPSLIB::StrConvertToString(file1_Source_Well);
          TrcTrace(Translate("l_strSource_Well: "), l_strSource_Well);
          l_strTarget_Well = APPSLIB::StrConvertToString(file1_Target_Well);
          TrcTrace(Translate("l_strTarget_Well: "), l_strTarget_Well);
          l_strSourceVolume = APPSLIB::StrConvertToString(l_flt_SourceVolume);
          TrcTrace(Translate("l_strSourceVolume: "), l_strSourceVolume);
          l_strDiluentVolume = APPSLIB::StrConvertToString(l_flt_DiluentVolume);
          TrcTrace(Translate("l_strDiluentVolume: "), l_strDiluentVolume);
          TrcTrace(Translate("l_strCalculatedDiluentVolume: "), l_strCalculatedDiluentVolume);
          TrcTrace(Translate("l_strCalculatedSourceVolume: "), l_strCalculatedSourceVolume);
          file2.AddField("Source_SampleID", l_strSource_SampleID, hslString, 255);
          file2.AddField("Source_Well", l_strSource_Well, hslString, 255);
          file2.AddField("Target_Well", l_strTarget_Well, hslString, 255);
          file2.AddField("Source_Concentration", l_strSource_Concentration, hslString, 255);
          file2.AddField("Calculated_SourceVolume", l_strCalculatedSourceVolume, hslString, 255);
          file2.AddField("Used_SourceVolume", l_strSourceVolume, hslString, 255);
          file2.AddField("Calculated_DiluentVolume", l_strCalculatedDiluentVolume, hslString, 255);
          file2.AddField("Used_DiluentVolume", l_strDiluentVolume, hslString, 255);
          if( 0 == file2.Open(l_strOutputFilePath + " " + "NormalizationReport$", hslAppend) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, l_strOutputFilePath, "HxMetEdCompCmd");
          }
          if( 0 == file2.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 != file2.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          file2.RemoveFields();
        }
      }
    }
    o_seq_IntermediateDispSequence.SetCurrentPosition(1);
    if(0){
      Util2::Debug::TraceArray_3(Translate("Volume Arrays of Source and Diluent respecitvely for Intermediate Plate: "), i_arr_SourceWellID, o_arr_VolumesSourceToIntermediate, o_arr_VolumesDiluentToIntermediate);
    }
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: INTERMEDIATE NORMALISATION   COMPLETED\n************************************************************************************************************\n"));
    VectorCustomDialogs::Terminate();
  }

  function C_Adapter2( device & i_MLSTAR, variable i_hdl_InputWorklist, variable & i_arr_SourceWellID[], sequence i_seq_Adapter1TubesOrPlate, sequence i_seq_Adapter2TubesOrPlate, sequence i_seq_AdapterDestPlate, sequence & o_seq_Adapter1Asp, sequence & o_seq_Adapter2Asp, sequence & o_seq_AdapterDisp, variable & o_arr_Adapter1Distinct[], variable & o_arr_Adapter2Distinct[], variable & o_arr_Adapter1Frequency[], variable & o_arr_Adapter2Frequency[] ) void {
    private variable l_int_Barcode;
    private variable file1_Source_Well;
    private variable loopCounter8;
    private variable file1_Adapter1;
    private variable file1_Adapter2;
    private variable l_int_ReturnLookUp;
    private variable l_int_NumberOfSamples;
    private variable l_str_DummyLabwareId_BarcodeDisp;
    private variable file1_Source_SampleID;
    private variable l_str_SQLSentence;
    private variable loopCounter2;
    private variable l_str_DummyLabwareId_BarcodeAsp;
    private variable loopCounter3;
    private variable l_str_Barcode;
    private file file1;
    private variable l_arr_Adapter1CheckDistinct[];
    private variable l_arr_Adapter2CheckDistinct[];
    private variable l_arr_Adapter1[];
    private variable l_arr_Adapter2[];
    private variable l_str_DummyLabwareId_Adapter2Asp;
    private variable l_str_DummyLabwareId_Adapter1Asp;
    private variable l_str_DummyLabwareId_AdapterDisp;
    private variable l_int_Adapter1CheckSize;
    private variable l_int_CurrentAdapter1ThisPool;
    private variable l_int_NumberOfDistinctAdapter1;
    private variable l_int_NumberOfAdapters;
    private variable l_int_NumberOfDistinctAdapter2;
    private variable l_int_Adapter2CheckSize;
    private variable l_intAdapterIndex;
    private variable l_int_CurrentAdapter2ThisPool;
    private variable l_str_Adapter;
    private variable l_arr_Adapter2Check[];
    private variable l_arr_Adapter1Check[];
    private variable l_intAdapter2PositionId;
    private variable l_strAdapter2PositionId;
    private variable l_intNumberOfIndex1PositionIds;
    private variable l_intHighestIndex1PositionID;
    private variable l_intCurrentPositionId;
    private variable loopCounter1;
    private variable l_strCurrentPositionId;
    private variable l_intAdapter2WorkListPosId;
    private variable l_strAdapter1FirstPositionId;
    private variable l_strAdapter2FirstPositionId;
    private variable l_str_AdapterCombo;
    private variable l_int_AdapterComboSize;
    private variable file1_Target_Well;
    private variable l_str_CurrentAdapter2ThisPool;
    private variable l_strErrorMessage;
    private variable l_str_CurrentAdapter1ThisPool;
    private variable l_int_AdapterComboDistinctSize;
    private variable l_arr_AdapterCombo[];
    private variable l_arr_AdapterComboDistinct[];
    { sequence __temp; o_seq_Adapter1Asp = __temp; }
    { sequence __temp; o_seq_Adapter2Asp = __temp; }
    { sequence __temp; o_seq_AdapterDisp = __temp; }
    o_arr_Adapter1Distinct.SetSize( 0);
    o_arr_Adapter2Distinct.SetSize( 0);
    o_arr_Adapter1Frequency.SetSize( 0);
    o_arr_Adapter2Frequency.SetSize( 0);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: ADAPTER2   STARTED\n************************************************************************************************************\n"));
    if(0){
      Util2::Debug::TraceSequence(i_seq_Adapter1TubesOrPlate);
      Util2::Debug::TraceSequence(i_seq_Adapter2TubesOrPlate);
      Util2::Debug::TraceSequence(i_seq_AdapterDestPlate);
    }
    l_str_DummyLabwareId_Adapter1Asp = SeqGetLabwareId(i_seq_Adapter1TubesOrPlate);
    l_str_DummyLabwareId_Adapter2Asp = SeqGetLabwareId(i_seq_Adapter2TubesOrPlate);
    l_strAdapter1FirstPositionId = SeqGetPositionId(i_seq_Adapter1TubesOrPlate);
    SeqGetPositionId(i_seq_Adapter2TubesOrPlate);
    l_strAdapter2FirstPositionId = SeqGetPositionId(i_seq_Adapter1TubesOrPlate);
    if(0){
      TrcTrace(Translate("l_str_DummyLabwareId_BarcodeAsp: "), l_str_DummyLabwareId_BarcodeAsp);
    }
    l_str_DummyLabwareId_AdapterDisp = SeqGetLabwareId(i_seq_AdapterDestPlate);
    if(0){
      TrcTrace(Translate("l_str_DummyLabwareId_BarcodeDisp: "), l_str_DummyLabwareId_BarcodeDisp);
    }
    l_arr_Adapter1.SetSize(0);
    if(0){
      l_arr_Adapter2.SetSize(0);
    }
    l_arr_Adapter1CheckDistinct.SetSize(0);
    l_arr_Adapter2CheckDistinct.SetSize(0);
    file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
    file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
    file1.AddField("Target_Well", file1_Target_Well, hslString, 255);
    file1.AddField("Adapter1", file1_Adapter1, hslString, 255);
    file1.AddField("Adapter2", file1_Adapter2, hslString, 255);
    if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
    }
    l_int_NumberOfSamples = 0;
    {
      loopCounter3 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter3 = loopCounter3 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_int_ReturnLookUp = Lookup(i_arr_SourceWellID, file1_Source_Well);
        if (l_int_ReturnLookUp > 0)
        {
          l_int_NumberOfSamples = l_int_NumberOfSamples + 1;
          l_arr_Adapter1.AddAsLast(file1_Adapter1);
          SeqAdd(o_seq_Adapter1Asp, l_str_DummyLabwareId_Adapter1Asp, file1_Adapter1);
          SeqAdd(o_seq_AdapterDisp, l_str_DummyLabwareId_AdapterDisp, file1_Source_Well);
        }
      }
    }
    Util2::Debug::TraceArray_2(Translate(" Array of Samples and their resepective Adapters (1): "), i_arr_SourceWellID, l_arr_Adapter1);
    TrcTraceSequence(o_seq_Adapter1Asp);
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    SeqResetSequenceIndexes(o_seq_Adapter1Asp);
    l_intNumberOfIndex1PositionIds = SeqGetTotal(o_seq_Adapter1Asp);
    l_intHighestIndex1PositionID = 0;
    {
      for(loopCounter1 = 0; loopCounter1 < l_intNumberOfIndex1PositionIds;)
      {
        loopCounter1 = loopCounter1 + 1;
        l_strCurrentPositionId = SeqGetPositionId(o_seq_Adapter1Asp);
        TrcTrace(Translate("l_strCurrentPositionId: "), l_strCurrentPositionId);
        l_intCurrentPositionId = APPSLIB::StrConvertToNumber(l_strCurrentPositionId);
        TrcTrace(Translate("l_intCurrentPositionId: "), l_intCurrentPositionId);
        if (l_intCurrentPositionId > l_intHighestIndex1PositionID)
        {
          l_intHighestIndex1PositionID = l_intCurrentPositionId;
        }
        TrcTrace(Translate("l_intHighestIndex1PositionID: "), l_intHighestIndex1PositionID);
        SeqIncrement(o_seq_Adapter1Asp, 1);
      }
    }
    SeqResetSequenceIndexes(o_seq_Adapter1Asp);
    l_arr_Adapter2.SetSize(0);
    l_arr_Adapter2CheckDistinct.SetSize(0);
    file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
    file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
    file1.AddField("Target_Well", file1_Target_Well, hslString, 255);
    file1.AddField("Adapter2", file1_Adapter2, hslString, 255);
    if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
    }
    l_int_NumberOfSamples = 0;
    file1.Seek(0, hslFirst);
    {
      loopCounter3 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter3 = loopCounter3 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_int_ReturnLookUp = Lookup(i_arr_SourceWellID, file1_Source_Well);
        if (l_int_ReturnLookUp > 0)
        {
          l_int_NumberOfSamples = l_int_NumberOfSamples + 1;
          l_arr_Adapter2.AddAsLast(file1_Adapter2);
          l_intAdapter2WorkListPosId = APPSLIB::StrConvertToNumber(file1_Adapter2);
          TrcTrace(Translate("l_intAdapter2WorkListPosId: "), l_intAdapter2WorkListPosId);
          l_intAdapter2PositionId = l_intHighestIndex1PositionID + l_intAdapter2WorkListPosId;
          TrcTrace(Translate("l_intAdapter2PositionId: "), l_intAdapter2PositionId);
          l_strAdapter2PositionId = APPSLIB::StrConvertToString(l_intAdapter2PositionId);
          TrcTrace(Translate("l_strAdapter2PositionId: "), l_strAdapter2PositionId);
          SeqAdd(o_seq_Adapter2Asp, l_str_DummyLabwareId_Adapter2Asp, l_strAdapter2PositionId);
        }
      }
    }
    Util2::Debug::TraceArray_2(Translate(" Array of Samples and their resepective Adapters (2): "), i_arr_SourceWellID, l_arr_Adapter2);
    TrcTraceSequence(o_seq_Adapter2Asp);
    TrcTraceSequence(o_seq_AdapterDisp);
    l_intAdapterIndex = 0;
    {
      for(loopCounter2 = 0; loopCounter2 < t_int_NumberOfTargetsFromFile;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_arr_Adapter1Check.SetSize(0);
        l_arr_Adapter2Check.SetSize(0);
        l_arr_AdapterCombo.SetSize(0);
        {
          for(loopCounter8 = 0; loopCounter8 < t_arr_NumberOfSamplePerPool.ElementAt( loopCounter2 -1);)
          {
            loopCounter8 = loopCounter8 + 1;
            l_intAdapterIndex = l_intAdapterIndex + 1;
            l_int_CurrentAdapter1ThisPool=l_arr_Adapter1.GetAt(l_intAdapterIndex-1);
            l_int_CurrentAdapter2ThisPool=l_arr_Adapter2.GetAt(l_intAdapterIndex-1);
            l_arr_Adapter1Check.AddAsLast(l_int_CurrentAdapter1ThisPool);
            l_arr_Adapter2Check.AddAsLast(l_int_CurrentAdapter2ThisPool);
            l_str_CurrentAdapter1ThisPool = APPSLIB::StrConvertToString(l_int_CurrentAdapter1ThisPool);
            l_str_CurrentAdapter2ThisPool = APPSLIB::StrConvertToString(l_int_CurrentAdapter2ThisPool);
            l_str_AdapterCombo = StrConcat4(Translate(""), t_arr_TargetWellPositions.ElementAt( l_intAdapterIndex -1), l_str_CurrentAdapter1ThisPool, l_str_CurrentAdapter2ThisPool);
            l_arr_AdapterCombo.AddAsLast(l_str_AdapterCombo);
          }
        }
        get_distinct_from_array(l_arr_Adapter1Check, l_arr_Adapter1CheckDistinct);
        get_distinct_from_array(l_arr_Adapter2Check, l_arr_Adapter2CheckDistinct);
        get_distinct_from_array(l_arr_AdapterCombo, l_arr_AdapterComboDistinct);
        Util2::Debug::TraceArray(Translate("l_arr_Adapter1CheckDistinct: "), l_arr_Adapter1CheckDistinct);
        Util2::Debug::TraceArray(Translate("l_arr_Adapter1Check: "), l_arr_Adapter1Check);
        Util2::Debug::TraceArray(Translate("l_arr_Adapter2CheckDistinct: "), l_arr_Adapter2CheckDistinct);
        Util2::Debug::TraceArray(Translate("l_arr_Adapter2Check: "), l_arr_Adapter2Check);
        Util2::Debug::TraceArray(Translate("l_str_AdapterCombo: "), l_arr_AdapterCombo);
        Util2::Debug::TraceArray(Translate("ll_arr_AdapterComboDistinct: "), l_arr_AdapterComboDistinct);
        l_int_NumberOfDistinctAdapter1=l_arr_Adapter1CheckDistinct.GetSize();
        l_int_NumberOfDistinctAdapter2=l_arr_Adapter2CheckDistinct.GetSize();
        l_int_Adapter1CheckSize=l_arr_Adapter1Check.GetSize();
        l_int_Adapter2CheckSize=l_arr_Adapter2Check.GetSize();
        l_int_AdapterComboSize=l_arr_AdapterCombo.GetSize();
        l_int_AdapterComboDistinctSize=l_arr_AdapterComboDistinct.GetSize();
        if (l_int_AdapterComboSize != l_int_AdapterComboDistinctSize)
        {
          l_strErrorMessage = StrConcat4(Translate("There is a duplicate combination of adapters/indexes/barcodes used for  target well "), t_arr_TargetWellPositions.ElementAt( l_intAdapterIndex -1), Translate("\nPlease correct the worklist before attempting to run the method again."), Translate("\n\n The method will now ABORT."));
          VectorCustomDialogs::Initialize();
          VectorCustomDialogs::ErrorDialog(Translate("Adapter Worklist Error"), 0, 0, 0, 0, 0, l_strErrorMessage, Translate(""));
          VectorCustomDialogs::Terminate();
          abort;
        }
        if( 0 != file1.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file1.RemoveFields();
      }
    }
    o_arr_Adapter1Distinct.SetSize(0);
    o_arr_Adapter1Frequency.SetSize(0);
    get_distinct_from_array(l_arr_Adapter1, o_arr_Adapter1Distinct);
    l_int_NumberOfDistinctAdapter1=o_arr_Adapter1Distinct.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfDistinctAdapter1;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_int_NumberOfAdapters = 0;
        l_str_Adapter=o_arr_Adapter1Distinct.GetAt(loopCounter2-1);
        if(0){
          l_int_Barcode = APPSLIB::StrConvertToNumber(l_str_Barcode);
        }
        l_str_SQLSentence = StrConcat8(Translate("Select * from [Sheet1$] where [Adapter1] ="), l_str_Adapter, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        Trace("l_str_SQLSentence: ",l_str_SQLSentence);
        file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
        file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
        file1.AddField("Adapter1", file1_Adapter1, hslString, 255);
        if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslAppend, l_str_SQLSentence) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (file1.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == file1.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            l_int_ReturnLookUp = Lookup(i_arr_SourceWellID, file1_Source_Well);
            if (l_int_ReturnLookUp > 0)
            {
              l_int_NumberOfAdapters = l_int_NumberOfAdapters + 1;
            }
          }
        }
        o_arr_Adapter1Frequency.AddAsLast(l_int_NumberOfAdapters);
        if( 0 != file1.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file1.RemoveFields();
      }
    }
    Util2::Debug::TraceArray_2(Translate("Output Array of Adapters (1) and their Frequency of Use : "), o_arr_Adapter1Distinct, o_arr_Adapter1Frequency);
    o_arr_Adapter2Distinct.SetSize(0);
    o_arr_Adapter2Frequency.SetSize(0);
    get_distinct_from_array(l_arr_Adapter2, o_arr_Adapter2Distinct);
    l_int_NumberOfDistinctAdapter2=o_arr_Adapter2Distinct.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfDistinctAdapter2;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_int_NumberOfAdapters = 0;
        l_str_Adapter=o_arr_Adapter2Distinct.GetAt(loopCounter2-1);
        l_str_SQLSentence = StrConcat8(Translate("Select * from [Sheet1$] where [Adapter2] ="), l_str_Adapter, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        Trace("l_str_SQLSentence: ",l_str_SQLSentence);
        file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
        file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
        file1.AddField("Adapter2", file1_Adapter2, hslString, 255);
        if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslAppend, l_str_SQLSentence) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
        }
        {
          loopCounter3 = 0;
          while (
             (file1.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == file1.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            l_int_ReturnLookUp = Lookup(i_arr_SourceWellID, file1_Source_Well);
            if (l_int_ReturnLookUp > 0)
            {
              l_int_NumberOfAdapters = l_int_NumberOfAdapters + 1;
            }
          }
        }
        o_arr_Adapter2Frequency.AddAsLast(l_int_NumberOfAdapters);
        if( 0 != file1.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file1.RemoveFields();
      }
    }
    Util2::Debug::TraceArray_2(Translate("Output Array of Adapters (2) and their Frequency of Use : "), o_arr_Adapter2Distinct, o_arr_Adapter2Frequency);
    SeqResetSequenceIndexes(o_seq_Adapter1Asp);
    SeqResetSequenceIndexes(o_seq_Adapter2Asp);
    SeqResetSequenceIndexes(o_seq_AdapterDisp);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: ADAPTER2   COMPLETED\n************************************************************************************************************\n"));
  }

  function D_PoolingArrays( variable & o_arr_intNumberOfSamplesPerPool[], variable & o_int_NumberOfPools ) void {
    private variable l_strDescription;
    o_arr_intNumberOfSamplesPerPool.SetSize( 0);
    o_int_NumberOfPools = 0;
    MECC::TraceComment(Translate("**********************************************************************************************************************************************\n                    WORKLIST:: POOLING ARRAYS   STARTED\n**********************************************************************************************************************************************\n"));
    o_arr_intNumberOfSamplesPerPool.SetSize(0);
    o_arr_intNumberOfSamplesPerPool=t_arr_NumberOfSamplePerPool;
    l_strDescription = StrConcat12(Translate("Target Wells and the respective number of samples in the same pool"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    o_int_NumberOfPools=o_arr_intNumberOfSamplesPerPool.GetSize();
    Util2::Debug::TraceArray_2(l_strDescription, t_arr_Disctint_Pool_Well, o_arr_intNumberOfSamplesPerPool);
    TrcTrace(Translate("Total Number of Pools: "), o_int_NumberOfPools);
    MECC::TraceComment(Translate("**********************************************************************************************************************************************\n                    WORKLIST:: POOLING ARRAYS   COMPLETED\n**********************************************************************************************************************************************\n"));
  }

  function C_UMI_Plate( device & i_MLSTAR, variable i_hdl_InputWorklist, variable & i_arr_SourceWellID[], sequence i_seq_AdapterTubesOrPlate, sequence i_seq_AdapterDestPlate, sequence & o_seq_AdapterAsp, sequence & o_seq_AdapterDisp, variable & o_arr_AdapterDistinct[], variable & o_arr_AdapterFrequency[], variable i_bln_UsingMPH ) void {
    private variable l_int_BarcodeTemp;
    private variable l_int_BarcodeTemp2;
    private variable file1_Source_Well;
    private variable loopCounter8;
    private variable l_bln_BarcodeTempSortCheck;
    private variable l_int_NumberOfSamplesAdditional;
    private variable l_int_NumberOfAdapters;
    private variable l_intBarcodeIndex;
    private variable l_int_ReturnLookUp;
    private variable l_int_NumberOfSamplesRemaining;
    private variable file1_UMI_Plate;
    private variable l_int_NumberOfSamples;
    private variable l_int_CurrentBarcodeThisPool;
    private variable l_str_DummyLabwareId_BarcodeDisp;
    private variable l_str_WellID_MPH;
    private variable l_int_NumberOfSamplesColumn;
    private variable l_int_BarcodeCheckSize;
    private variable l_strErrorMessage;
    private variable l_int_NumberOfDistinctBarcodes;
    private variable l_str_BarcodeTemp;
    private variable l_int_NumberOfSamplesSet;
    private variable l_int_NumberOfBarcodes;
    private variable file1_Source_SampleID;
    private variable l_str_SQLSentence;
    private variable l_int_StartingBarcode;
    private variable loopCounter2;
    private variable l_str_DummyLabwareId_BarcodeAsp;
    private variable loopCounter3;
    private variable l_int_SizeArrBarcodes;
    private variable l_str_Barcode;
    private file file1;
    private variable l_arr_Barcodes[];
    private variable l_arr_BarcodeTempRemade[];
    private variable l_arr_BarcodeCheck[];
    private variable l_arr_BarcodeTemp[];
    private variable l_arr_BarcodeTempSorted[];
    private variable l_arrTempBarcodes[];
    private variable l_arr_BarcodeCheckDistinct[];
    { sequence __temp; o_seq_AdapterAsp = __temp; }
    { sequence __temp; o_seq_AdapterDisp = __temp; }
    o_arr_AdapterDistinct.SetSize( 0);
    o_arr_AdapterFrequency.SetSize( 0);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: UMI PLATE   STARTED\n************************************************************************************************************\n"));
    if(0){
      Util2::Debug::TraceSequence(i_seq_AdapterTubesOrPlate);
      Util2::Debug::TraceSequence(i_seq_AdapterDestPlate);
    }
    l_str_DummyLabwareId_BarcodeAsp = SeqGetLabwareId(i_seq_AdapterTubesOrPlate);
    if(0){
      TrcTrace(Translate("l_str_DummyLabwareId_BarcodeAsp: "), l_str_DummyLabwareId_BarcodeAsp);
    }
    l_str_DummyLabwareId_BarcodeDisp = SeqGetLabwareId(i_seq_AdapterDestPlate);
    if(0){
      TrcTrace(Translate("l_str_DummyLabwareId_BarcodeDisp: "), l_str_DummyLabwareId_BarcodeDisp);
    }
    l_arr_Barcodes.SetSize(0);
    l_arr_BarcodeCheckDistinct.SetSize(0);
    file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
    file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
    file1.AddField("UMI_Plate", file1_UMI_Plate, hslString, 255);
    if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
    }
    l_int_NumberOfSamples = 0;
    {
      loopCounter3 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter3 = loopCounter3 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        l_int_ReturnLookUp = Lookup(i_arr_SourceWellID, file1_Source_Well);
        if (l_int_ReturnLookUp > 0)
        {
          l_int_NumberOfSamples = l_int_NumberOfSamples + 1;
          l_arr_Barcodes.AddAsLast(file1_UMI_Plate);
          SeqAdd(o_seq_AdapterAsp, l_str_DummyLabwareId_BarcodeAsp, file1_UMI_Plate);
          SeqAdd(o_seq_AdapterDisp, l_str_DummyLabwareId_BarcodeDisp, file1_Source_Well);
        }
      }
    }
    Util2::Debug::TraceArray_2(Translate(" Array of Samples and their resepective UMI adapter: "), i_arr_SourceWellID, l_arr_Barcodes);
    TrcTraceSequence(o_seq_AdapterAsp);
    TrcTraceSequence(o_seq_AdapterDisp);
    if (i_bln_UsingMPH == ASWGLOBAL::BOOL::TRUE)
    {
      l_int_NumberOfSamplesRemaining = l_int_NumberOfSamples % 8;
      if (l_int_NumberOfSamplesRemaining > 0)
      {
        l_int_NumberOfSamplesAdditional = 8 - l_int_NumberOfSamplesRemaining;
        l_int_NumberOfSamplesSet = l_int_NumberOfSamples + l_int_NumberOfSamplesAdditional;
      }
      else
      {
        l_int_NumberOfSamplesSet = l_int_NumberOfSamples;
      }
      l_int_NumberOfSamplesColumn = l_int_NumberOfSamplesSet / (8 * 1.0);
      l_intBarcodeIndex = 0;
      l_arr_BarcodeTemp.SetSize(0);
      l_arr_BarcodeTempSorted.SetSize(0);
      l_arr_BarcodeTempRemade.SetSize(0);
      l_int_SizeArrBarcodes=l_arr_Barcodes.GetSize();
      {
        for(loopCounter8 = 0; loopCounter8 < l_int_SizeArrBarcodes;)
        {
          loopCounter8 = loopCounter8 + 1;
          l_intBarcodeIndex = l_intBarcodeIndex + 1;
          l_int_BarcodeTemp=l_arr_Barcodes.GetAt(l_intBarcodeIndex-1);
          l_int_BarcodeTemp2 = StrMid(l_int_BarcodeTemp, 1, 2);
          l_int_BarcodeTemp2 = StrIVal(l_int_BarcodeTemp2);
          l_arr_BarcodeTemp.AddAsLast(l_int_BarcodeTemp2);
        }
      }
      l_arr_BarcodeTempSorted = HSLExtensions::Array::Sort(l_arr_BarcodeTemp, 1, l_bln_BarcodeTempSortCheck);
      l_int_StartingBarcode=l_arr_BarcodeTempSorted.GetAt(1-1);
      {
        for(loopCounter8 = 0; loopCounter8 < l_int_NumberOfSamplesColumn;)
        {
          loopCounter8 = loopCounter8 + 1;
          l_str_WellID_MPH = StrConcat2(Translate("A"), l_int_StartingBarcode);
          l_arr_BarcodeTempRemade.AddAsLast(l_str_WellID_MPH);
          l_str_WellID_MPH = StrConcat2(Translate("B"), l_int_StartingBarcode);
          l_arr_BarcodeTempRemade.AddAsLast(l_str_WellID_MPH);
          l_str_WellID_MPH = StrConcat2(Translate("C"), l_int_StartingBarcode);
          l_arr_BarcodeTempRemade.AddAsLast(l_str_WellID_MPH);
          l_str_WellID_MPH = StrConcat2(Translate("D"), l_int_StartingBarcode);
          l_arr_BarcodeTempRemade.AddAsLast(l_str_WellID_MPH);
          l_str_WellID_MPH = StrConcat2(Translate("E"), l_int_StartingBarcode);
          l_arr_BarcodeTempRemade.AddAsLast(l_str_WellID_MPH);
          l_str_WellID_MPH = StrConcat2(Translate("F"), l_int_StartingBarcode);
          l_arr_BarcodeTempRemade.AddAsLast(l_str_WellID_MPH);
          l_str_WellID_MPH = StrConcat2(Translate("G"), l_int_StartingBarcode);
          l_arr_BarcodeTempRemade.AddAsLast(l_str_WellID_MPH);
          l_str_WellID_MPH = StrConcat2(Translate("H"), l_int_StartingBarcode);
          l_arr_BarcodeTempRemade.AddAsLast(l_str_WellID_MPH);
          l_int_StartingBarcode = l_int_StartingBarcode + 1;
        }
      }
      Util2::Debug::TraceArray(Translate("l_arr_BarcodeTempSorted: "), l_arr_BarcodeTempSorted);
      Util2::Debug::TraceArray(Translate("l_arr_BarcodeTempRemade: "), l_arr_BarcodeTempRemade);
      l_arr_Barcodes=l_arr_BarcodeTempRemade;
    }
    l_intBarcodeIndex = 0;
    {
      for(loopCounter2 = 0; loopCounter2 < t_int_NumberOfTargetsFromFile;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_arr_BarcodeCheck.SetSize(0);
        {
          for(loopCounter8 = 0; loopCounter8 < t_arr_NumberOfSamplePerPool.ElementAt( loopCounter2 -1);)
          {
            loopCounter8 = loopCounter8 + 1;
            l_intBarcodeIndex = l_intBarcodeIndex + 1;
            l_int_CurrentBarcodeThisPool=l_arr_Barcodes.GetAt(l_intBarcodeIndex-1);
            l_arr_BarcodeCheck.AddAsLast(l_int_CurrentBarcodeThisPool);
          }
        }
        get_distinct_from_array(l_arr_BarcodeCheck, l_arr_BarcodeCheckDistinct);
        Util2::Debug::TraceArray(Translate("l_arr_BarcodeCheckDistinct: "), l_arr_BarcodeCheckDistinct);
        Util2::Debug::TraceArray(Translate("l_arr_BarcodeCheck: "), l_arr_BarcodeCheck);
        l_int_NumberOfDistinctBarcodes=l_arr_BarcodeCheckDistinct.GetSize();
        l_int_BarcodeCheckSize=l_arr_BarcodeCheck.GetSize();
        if (l_int_NumberOfDistinctBarcodes != l_int_BarcodeCheckSize)
        {
          l_strErrorMessage = StrConcat4(Translate("There is a identical adapters/indexes/barcodes used for  target well "), t_arr_TargetWellPositions.ElementAt( l_intBarcodeIndex -1), Translate("\nPlease correct the worklist before attempting to run the method again."), Translate("\n\n The method will now ABORT."));
          VectorCustomDialogs::Initialize();
          VectorCustomDialogs::ErrorDialog(Translate("Adapter Worklist Error"), 0, 0, 0, 0, 0, l_strErrorMessage, Translate(""));
          VectorCustomDialogs::Terminate();
          abort;
        }
        if( 0 != file1.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file1.RemoveFields();
      }
    }
    o_arr_AdapterDistinct.SetSize(0);
    o_arr_AdapterFrequency.SetSize(0);
    get_distinct_from_array(l_arr_Barcodes, o_arr_AdapterDistinct);
    l_int_NumberOfDistinctBarcodes=o_arr_AdapterDistinct.GetSize();
    if(0){
      {
        for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfDistinctBarcodes;)
        {
          loopCounter2 = loopCounter2 + 1;
          l_int_NumberOfBarcodes = 1;
          l_str_Barcode=o_arr_AdapterDistinct.GetAt(loopCounter2-1);
          l_str_SQLSentence = StrConcat8(Translate("Select * from [Sheet1$] where [Adapter1] = "), l_str_Barcode, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          Trace("l_str_SQLSentence: ",l_str_SQLSentence);
          file1.SetExtendedProperties( "IMEX=1");
          file1.AddField("Source_SampleID", file1_Source_SampleID, hslString, 255);
          file1.AddField("Source_Well", file1_Source_Well, hslString, 255);
          file1.AddField("UMI_Plate", file1_UMI_Plate, hslString, 255);
          if( 0 == file1.Open(i_hdl_InputWorklist + " " + "Sheet1$", hslAppend, l_str_SQLSentence) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_hdl_InputWorklist, "HxMetEdCompCmd");
          }
          {
            loopCounter3 = 0;
            while (
               (file1.Eof() == 0)
            )
            {
              loopCounter3 = loopCounter3 + 1;
              if( 0 == file1.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              l_int_ReturnLookUp = Lookup(i_arr_SourceWellID, l_str_Barcode);
              if (l_int_ReturnLookUp > 0)
              {
                l_int_NumberOfBarcodes = l_int_NumberOfBarcodes + 1;
              }
            }
          }
          o_arr_AdapterFrequency.AddAsLast(l_int_NumberOfBarcodes);
          if( 0 != file1.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          file1.RemoveFields();
        }
      }
    }
    l_int_NumberOfAdapters=l_arr_Barcodes.GetSize();
    l_arrTempBarcodes=l_arr_Barcodes;
    {
      for(loopCounter2 = 0; loopCounter2 < l_int_NumberOfDistinctBarcodes;)
      {
        loopCounter2 = loopCounter2 + 1;
        l_int_NumberOfBarcodes = 0;
        l_str_Barcode=o_arr_AdapterDistinct.GetAt(loopCounter2-1);
        {
          for(loopCounter3 = 0; loopCounter3 < l_int_NumberOfAdapters;)
          {
            loopCounter3 = loopCounter3 + 1;
            l_str_BarcodeTemp=l_arrTempBarcodes.GetAt(loopCounter3-1);
            if (l_str_Barcode == l_str_BarcodeTemp)
            {
              l_arrTempBarcodes.SetAt(loopCounter3-1, Translate("Clear"));
              l_int_NumberOfBarcodes = l_int_NumberOfBarcodes + 1;
            }
          }
        }
        o_arr_AdapterFrequency.AddAsLast(l_int_NumberOfBarcodes);
      }
    }
    Util2::Debug::TraceArray(Translate("l_str_BarcodeTemp: "), l_arrTempBarcodes);
    Util2::Debug::TraceArray_2(Translate("Output Array of UMI Adapter and their Frequency of Use : "), o_arr_AdapterDistinct, o_arr_AdapterFrequency);
    SeqResetSequenceIndexes(o_seq_AdapterAsp);
    SeqResetSequenceIndexes(o_seq_AdapterDisp);
    MECC::TraceComment(Translate("************************************************************************************************************\n                    WORKLIST:: UMI PLATE   COMPLETED\n************************************************************************************************************\n"));
  }
} // library namespace
