 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "VectorCustomDialogs\\VectorCustomDialogs.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "ASWStandardDialogs\\ASWStandardDialogs.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "HSLAppsLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\InitWorkListLocation.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "Labware Properties\\Labware_Property_Query.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "VectorCustomDialogs\\VectorCustomDialogs.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\InitWorkListLocation.hsl" }
 namespace _Method { #include "HSLExtensions\\Venus.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Stack_Reducer\\StackReducer.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarLoading\\NGSStarLoading.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarLoading\\NGSStarLoading.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarLoading\\NGSStarLoading.hs_" }
 namespace _Method { #include "HSLExtensions\\Array.hsl" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
 namespace _Method { #include "HSLLabwrAccess\\HSLLabwrAccess.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarLoading\\ARW_Global.hsl" }
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Methods\\Stranded mRNA Prep and Ligation_Deck_v1.1.0.res"
sequence t_seqMIDI_OnMagnet;
sequence t_seqHSP_Pipette;
sequence t_trpMIDI_WasteCORE;
sequence t_trpHSP_ODTC;
sequence t_trpHSP_WasteCORE;
sequence t_trpHSP_Pipette;
sequence t_trpHamiltonComfortLidODTC;
sequence t_trpHamiltonComfortLidStackParkPos;
sequence t_trpHSP_Pipette2;
sequence t_trpMIDI_Pipette;
sequence t_trpMIDI_OnMagnet;
sequence t_trpHSP_Waste;
sequence t_trpMIDI_Waste;
sequence t_seqMIDI_Pipette;
sequence t_seqHSP_Pipette2;
sequence t_trpHamiltonComfortLidWaste;
sequence t_trpHHS1_HSP;
variable t_intHHS1_HSP1;
variable t_intHHS2_HSP2;
variable t_intHHS3_HSP3_MIDI3;
variable t_intHHS4_MIDI1;
variable t_intHHS5_MIDI2;
variable t_arrIndex1IDs[];
variable t_arrIndex1PositionIDs[];
variable t_arrAdapterLigationPlatePositionIDs[];
variable t_blnODTCused;
variable t_blnSendEmails;
variable t_intRequiredNumberOf1000uLTipsM3;
variable t_intRequiredNumberOf1000uLTipsM4;
variable t_intRequiredNumberOf1000uLTipsM5;
variable t_intRequiredNumberOf300uLTipsM3;
variable t_intRequiredNumberOf300uLTipsM4;
variable t_intRequiredNumberOf300uLTipsM5;
variable t_intRequiredNumberOf50uLTipsM3;
variable t_intRequiredNumberOf50uLTipsM4;
variable t_intRequiredNumberOf50uLTipsM5;
variable t_strSerialNumberMLStar;
variable t_intSelectedIndexSTART;
variable t_intSelectedIndexSTOP;
variable t_strEmailAdress;
variable t_intNumberOfSamplesFromFile;
variable t_intDeviceNumberODTC;
variable t_blnSkipLoadingRoutine;
variable t_intRequiredNumberOf300uLTipsM2;
variable t_intRequiredNumberOf1000uLTipsM6;
variable t_intRequiredNumberOf1000uLTipsM7;
variable t_intRequiredNumberOf50uLTipsM1;
variable t_intRequiredNumberOf1000uLTipsM8;
variable t_intRequiredNumberOf50uLTipsM2;
variable t_intRequiredNumberOf300uLTipsM6;
variable t_fltSupernatant_M1_Volume;
variable t_intRequiredNumberOf300uLTipsM7;
variable t_intRequiredNumberOf300uLTipsM8;
variable t_intRequiredNumberOf50uLTipsM6;
variable t_intRequiredNumberOf50uLTipsM7;
variable t_intRequiredNumberOf50uLTipsM8;
variable t_intRequiredNumberOf1000uLTipsM1;
variable t_intRequiredNumberOf1000uLTipsM2;
variable t_intRequiredNumberOf300uLTipsM1;
variable t_intMethodTimeODTC;
variable t_fltVolumeTracking;
variable t_strCurrentPlateBarcode;
variable t_intRequestIDODTC;
variable t_fltAMPureXPBeadsVolume;
sequence t_trpHHS3_MIDI;
variable t_blnPreMixByOverturn;
sequence t_seqHHS3_MIDI;
variable t_fltSMM_Volume;
variable t_fltFirstStrandSynthesisMM_Volume;
variable t_fltATL4_Volume;
variable t_fltLIGX_Volume;
variable t_fltSTL_Volume;
variable t_fltRNAIndexAnchors_Volume;
variable t_fltEPM_Volume;
variable t_fltIndexAdapter_Volume;
variable t_fltSample_Volume;
variable t_fltELB_Volume;
variable t_strODTCProtocolPath;
sequence t_trpHHS3_HSP;
variable t_arrODTCMethodNames[];
variable t_blnEnforceStepSelectionCheck;
variable t_fltAMPureXPBeads_M3_Volume;
variable t_fltSupernatant_M3_Volume;
variable t_fltRSB_M3_Volume;
variable t_fltSupernatant_M6_Volume;
variable t_fltRSB_M6_Volume;
variable t_fltAMPureXPBeads_M6_Volume;
variable t_fltAMPureXPBeads_M8_Volume;
variable t_fltSupernatant_M8_Volume;
variable t_fltRSB_M8_Volume;
variable t_fltEthanol_M3_Volume;
variable t_fltEthanol_M6_Volume;
variable t_fltBWB_Volume;
variable t_fltBBB_Volume;
variable t_fltFragmentationMM_Volume;
variable t_fltRPBX_Volume;
variable t_fltRSB_M5_Volume;
sequence t_seqHHS1_HSP;
sequence t_trpHSP_OnMagnet;
sequence t_seqHSP_OnMagnet;
variable t_intNumberOfHamiltonComfortLidsReload;
variable t_intNGSPlatform;
variable t_strTipCounterNameTip300;
variable t_strTipCounterNameTip50;
variable t_strTipCounterNameTip1000;
variable t_blnBuildMMOnDeck;
variable t_blnReduceDeckTo4ChannelSystem;
variable t_blnMeasureVolumeWithinTroughs;
variable l_blnShowUVGUI;
variable t_blnSimulationMode;
variable t_intTransportTool;
variable t_intNumberOfColumnsInBatchProcessing;
variable t_arrBlnProcessActivation[];
sequence t_trpStack4;
variable l_int_OptionSelected;
variable t_blnMPHused;
sequence t_seqHHS4_MIDI;
sequence t_seqHHS4_MIDI_MPH;
sequence t_seqHSP_Pipette2_MPH;
sequence t_seqHHS5_MIDI_Channels;
sequence t_seqHHS3_MIDI_Channels;
sequence t_seqHHS3_HSP_MPH;
sequence t_seqEtOH;
sequence t_seqHHS2_HSP;
sequence t_seqHHS3_HSP;
sequence t_seqMIDI_Pipette_MPH;
sequence t_seqHHS5_MIDI_MPH;
sequence t_seqHHS2_HSP_MPH;
sequence t_seqHHS1_HSP_Channels;
sequence t_seqDW_Pipette_MPH;
sequence t_seqMIDI_OnMagnet_MPH;
sequence t_seqHHS3_HSP_Channels;
sequence t_seqHHS2_HSP_Channels;
sequence t_seqMIDI_OnMagnet_Channels;
sequence t_seqHHS1_HSP_MPH;
sequence t_seqDW_Pipette;
sequence t_seqHHS4_MIDI_Channels;
sequence t_trpHHS5_MIDI;
sequence t_seqMIDI_Pipette_Channels;
sequence t_seqHSP_Pipette2_Channels;
sequence t_trpHHS4_MIDI;
sequence t_seqHHS3_MIDI_MPH;
sequence t_seqHSP_Pipette_MPH;
sequence t_seqDW_Pipette_Channels;
sequence t_seqBeads;
sequence t_trpStack_MIDI;
sequence t_trpHHS2_HSP;
sequence t_seqHSP_Pipette_Channels;
sequence t_seqHHS5_MIDI;
variable t_arrEPH3_MMVolumes[];
variable t_arrRVT_MMVolumes[];
variable t_arrNFW_MMVolumes[];
variable t_arrRPBXVolumes[];
sequence t_seqRPBX;
sequence t_seqFSA_MMAsp;
sequence t_seqFSA_MMDsp;
sequence t_seqSTL;
sequence t_seqFragmentationMM;
sequence t_seqELB;
sequence t_seqRVT_MMAsp;
sequence t_seqNFW;
sequence t_seqBWB;
sequence t_seqATL4;
sequence t_seqEPH3_MMAsp;
sequence t_seqRVT_MMDsp;
sequence t_seqLIGX;
sequence t_seqNFW_MMAsp;
sequence t_seqSMM;
sequence t_seqFirstStrandSynthesisMM;
sequence t_seqEPM;
sequence t_seqEPH3_MMDsp;
sequence t_seqBBB;
sequence t_seqNFW_MMDsp;
sequence t_seqRPBX_distinct;
sequence t_seqHSP_OnMagnet_Channels;
sequence t_seqHSP_OnMagnet_MPH;
variable t_arrFragmentationMMVolumes[];
variable t_arrFirstStrandSynthesisMMVolumes[];
variable t_arrFSA_MMVolumes[];
sequence t_seqFragmentationMM_distinct;
sequence t_seqFirstStrandSynthesisMM_distinct;
sequence t_seqIndexPlate_MPH;
sequence t_seqIndexPlate;
sequence t_seqIndexPlate_Channels;
variable t_fltEthanol_M8_Volume;
variable t_strLocalIPAddressOfComputer;
variable t_strFullPathReportFile;
variable t_strKitName;
variable t_strDeviceAddressODTC;
variable t_strKitProviderKitName;
variable t_blnTestODTCWithShortDummyProtocol;
variable t_strKitProvider;
variable t_blnUseMPHInsteadOfChannels;
sequence t_seqMlStarSequenceNotUsed;
variable t_blnActivateLiquidWasteSensor;
global device ML_STAR ("C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Methods\\Stranded mRNA Prep and Ligation_Deck_v1.1.0.lay", "ML_STAR", hslTrue);
sequence t_seqRSB_SecondStrandSynthesis;
sequence t_seqRSB_ATL;
variable t_blnSampleInputMassOf25ng;
variable t_blnSampleInputMassOf100ng;
variable t_blnSampleInputMassOf1000ng;
variable t_fltInputSampleMass;
dialog customDialog_1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable l_intCOREGripper(2); // Choose transport tool CORE Gripper to perform transport steps with CORE gripper instead of iswap. Value = 2
    private variable l_intISWAP(1); // Choose Transport tool iswap with a value of 1
    private variable l_strChannelPatternAbort;
    private variable l_intResultTipCheck;
    private variable l_intValueDialog;
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIP_PRESENT_CHECK_5ML_1ML::_InitLibrary();
    NGSSTARPREP::_InitLibrary();
    NGSSTARPROCESSES::_InitLibrary();
    LPQ::_InitLibrary();
    STACKREDUCER::_InitLibrary();
    NGSSTARLOADING::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Illumina Stranded mRNA Prep and Ligation for NGS STAR MOA\nBy:          Brannon Orr, Hamilton Reno\nDate:      Oct 31, 2024\nVersion:  1.5.1\n\nBased on  Illumina Stranded mRNA Prep, Ligation Reference Guide, Docum,ent #1000000124518 v03\n\nVersion Notes:\n\n1. review _VersionHistory Tab\n\n*************************************************************************************************************************************"));
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    l_intValueDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    VectorCustomDialogs::Initialize();
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
    t_blnSendEmails = ASWGLOBAL::BOOL::FALSE;
    t_strKitProvider = Translate("Illumina");
    t_strKitName = Translate("Stranded mRNA Prep and Ligation");
    t_strKitProviderKitName = StrConcat12(t_strKitProvider, Translate(" "), t_strKitName, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    t_intNGSPlatform = 2;
    t_strTipCounterNameTip50 = Translate("50F_Counter");
    t_strTipCounterNameTip300 = Translate("SVF_Counter");
    t_strTipCounterNameTip1000 = Translate("1000F_Counter");
    t_blnBuildMMOnDeck = ASWGLOBAL::BOOL::FALSE;
    t_blnSkipLoadingRoutine = ASWGLOBAL::BOOL::FALSE;
    t_blnMeasureVolumeWithinTroughs = ASWGLOBAL::BOOL::FALSE;
    t_blnPreMixByOverturn = ASWGLOBAL::BOOL::FALSE;
    t_blnEnforceStepSelectionCheck = ASWGLOBAL::BOOL::TRUE;
    t_blnActivateLiquidWasteSensor = ASWGLOBAL::BOOL::FALSE;
    if (t_intNGSPlatform == 3)
    {
      t_blnReduceDeckTo4ChannelSystem = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      t_blnReduceDeckTo4ChannelSystem = ASWGLOBAL::BOOL::FALSE;
    }
    if (t_intNGSPlatform == 2)
    {
      t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::FALSE;
    }
    l_blnShowUVGUI = ASWGLOBAL::BOOL::FALSE;
    INIT_WORKLIST_LOCATION::LockLibrary();
    t_blnSimulationMode = Util::GetSimulationMode();
    t_strSerialNumberMLStar = GetSerialNumber(ML_STAR);
    NGSSTARPREP::DATA_HandOverSimulationModeForAllLocalSMTs(t_blnSimulationMode, l_blnShowUVGUI);
    if(0){
      t_intTransportTool = l_intISWAP;
    }
    t_intTransportTool = l_intCOREGripper;
    t_strEmailAdress = Translate("Type in your email adress");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    VectorCustomDialogs::ShowStatusDialog(t_strKitName);
    VectorCustomDialogs::SetStatusText(Translate("Run Preparation..."));
    VectorCustomDialogs::SetStatusText(Translate("   Initializing Liquid Waste Sensor..."));
    if (t_blnActivateLiquidWasteSensor == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::LiquidWasteSensor_Init(2);
    }
    VectorCustomDialogs::SetStatusText(Translate("   Initializing CPAC chiller..."));
    NGSSTARPREP::CPAC_Init();
    NGSSTARPREP::CPAC_SetTemperature(4.0);
    VectorCustomDialogs::SetStatusText(Translate("   Initializing Hamilton Heater Shakers (HHSs)..."));
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::HHS_Init(t_intHHS3_HSP3_MIDI3, t_intHHS2_HSP2, t_intHHS1_HSP1, t_intHHS4_MIDI1, t_intHHS5_MIDI2, Translate("TCC"), Translate("0"), Translate("0"), Translate("0"), Translate("0"), ML_STAR);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS3_HSP3_MIDI3, 0);
    }
    else
    {
      NGSSTARPREP::HHS_Init(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2, Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), ML_STAR);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS1_HSP1, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS2_HSP2, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS3_HSP3_MIDI3, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS4_MIDI1, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS5_MIDI2, 0);
    }
    NGSSTARPROCESSES::DATA_HandoverSequencesAndDataToSMT(ML_STAR, t_intTransportTool, t_strKitProvider, t_strKitName, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, t_strEmailAdress, ASWGLOBAL::BOOL::FALSE, t_strFullPathReportFile, t_blnUseMPHInsteadOfChannels);
    NGSSTARLOADING::DATA_HandOverDataToSMT_NGSStarLoading(t_strFullPathReportFile, t_intNGSPlatform, t_strKitProvider, t_strKitName, t_blnUseMPHInsteadOfChannels, ASWGLOBAL::BOOL::FALSE, t_strTipCounterNameTip50, t_strTipCounterNameTip300, t_strTipCounterNameTip1000, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ASWGLOBAL::BOOL::FALSE);
    _SelectProcesses();
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      if(0){
        t_strDeviceAddressODTC = "192.168.1.10";
        t_strLocalIPAddressOfComputer = "192.168.1.1";
      }
      t_strDeviceAddressODTC = "192.168.88.254";
      t_strLocalIPAddressOfComputer = Translate("192.168.88.253");
      if(0){
        t_strDeviceAddressODTC = "169.254.120.232";
        t_strLocalIPAddressOfComputer = "169.254.49.68";
        t_strDeviceAddressODTC = "169.254.120.232";
        t_strLocalIPAddressOfComputer = "169.254.126.160";
      }
      NGSSTARPREP::ODTC_Init(t_strDeviceAddressODTC, t_intDeviceNumberODTC, t_strLocalIPAddressOfComputer);
      t_strODTCProtocolPath = Translate("C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Files\\ODTC_scripts\\NGSStarMOA Illumina StrandedMRNAPrepAndLigation.xml");
      t_blnTestODTCWithShortDummyProtocol = ASWGLOBAL::BOOL::FALSE;
      t_arrODTCMethodNames.SetSize(0);
      if (t_blnTestODTCWithShortDummyProtocol == ASWGLOBAL::BOOL::TRUE)
      {
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_Initialization"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_Initialization"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_Initialization"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_Initialization"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_Initialization"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_Initialization"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_Initialization"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_Initialization"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_Initialization"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_Initialization"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_Initialization"));
      }
      else
      {
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_Initialization"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_mRNA_CAP"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_mRNA_ELT"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_DEN94_8"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_FSS"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_SSS"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_ATAIL"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_LIG"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_PCR_15"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_PCR_13"));
        t_arrODTCMethodNames.AddAsLast(Translate("ILM044_PCR_10"));
      }
      NGSSTARPREP::ODTC_DownloadProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath);
      NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath, t_arrODTCMethodNames.ElementAt( 1 -1), t_intMethodTimeODTC, t_intRequestIDODTC, ASWGLOBAL::BOOL::FALSE);
    }
    else
    {
      t_strDeviceAddressODTC = "No ODTC used";
    }
    NGSSTARPREP::CPAC_SetTemperature(4.0);
    NGSSTARPREP::HHS_SetTemperature(t_intHHS1_HSP1, 0);
    NGSSTARPREP::HHS_SetTemperature(t_intHHS2_HSP2, 0);
    NGSSTARPREP::HHS_SetTemperature(t_intHHS3_HSP3_MIDI3, 0);
    NGSSTARPREP::HHS_SetTemperature(t_intHHS4_MIDI1, 0);
    NGSSTARPREP::HHS_SetTemperature(t_intHHS5_MIDI2, 0);
    SeqRemoveAll(t_seqMlStarSequenceNotUsed);
    VectorCustomDialogs::SetStatusText(Translate("   Resources required..."));
    _CalculateAndLoadConsumables();
    NGSSTARPROCESSES::DATA_HandoverSequencesAndDataToSMT(ML_STAR, t_intTransportTool, t_strKitProvider, t_strKitName, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, t_strEmailAdress, ASWGLOBAL::BOOL::FALSE, t_strFullPathReportFile, t_blnUseMPHInsteadOfChannels);
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M01_PurifyAndFragmentMessengerRNA();
    }
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M02_SynthesizeFirstStrandCDNA();
    }
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M03_SynthesizeSecondStrandCDNA();
    }
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M04_Adenylate3PrimeEnds();
    }
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M05_LigateAnchors();
    }
    if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M06_CleanUpFragments();
    }
    if (t_arrBlnProcessActivation.ElementAt( 7 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M07_AmplifyLibrary();
    }
    if (t_arrBlnProcessActivation.ElementAt( 8 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      M08_CleanUpLibrary();
    }
    VectorCustomDialogs::ShowStatusDialog(Translate("Shutdown system. . ."));
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to unload all carriers?"), Translate("Yes"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to unload all carriers?"), Translate("No"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Check your system"), Translate("1) Check / empty the tip waste, "));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Check your system"), Translate("2) Check / empty the liquid waste container,"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Check your system"), Translate("3) Remove and store reagents and created plates."));
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(5);
    VectorCustomDialogs::SetStatusText(Translate("Defragment the tip racks..."));
    if (t_blnMPHused == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::PIP_CleanUpTipAdapter(ML_STAR, ASWGLOBAL::BOOL::TRUE);
      NGSSTARPROCESSES::PIP_DefragmentTipRacks(ML_STAR);
    }
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(5, Translate("Do you want to unload all carriers?"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      VectorCustomDialogs::SetStatusText(Translate("Unloading the deck..."));
      MECC::TraceComment(Translate("***** Unload Carriers *****"));
      if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      else
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
    }
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    VectorCustomDialogs::SetStatusText(Translate(" ииииииииииииии METHOD COMPLETED ииииииииииииии "));
    VectorCustomDialogs::SetStatusText(Translate("Preparing for run shutdown..."));
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::HHS_Terminate(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2);
    NGSSTARPREP::CPAC_Terminate();
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_Terminate(t_intDeviceNumberODTC, ASWGLOBAL::BOOL::TRUE);
    }
    l_intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, l_strChannelPatternAbort, 8);
    if (l_intResultTipCheck == 1)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("Workflow completed"), Translate("All selected processes have been completed successfully. Clean the deck and empty the liquid waste."));
    }
    VectorCustomDialogs::Terminate();
    TIP_PRESENT_CHECK_5ML_1ML::_ExitLibrary();
    NGSSTARPREP::_ExitLibrary();
    NGSSTARPROCESSES::_ExitLibrary();
    LPQ::_ExitLibrary();
    STACKREDUCER::_ExitLibrary();
    NGSSTARLOADING::_ExitLibrary();
  } }
