private function M01_PurifyAndFragmentMessengerRNA(  ) void ;
private function M02_SynthesizeFirstStrandCDNA(  ) void ;
private function M03_SynthesizeSecondStrandCDNA(  ) void ;
private function M04_Adenylate3PrimeEnds(  ) void ;
private function M05_LigateAnchors(  ) void ;
private function M06_CleanUpFragments(  ) void ;
private function M07_AmplifyLibrary(  ) void ;
private function M08_CleanUpLibrary(  ) void ;
private function _CalculateAndLoadConsumables(  ) void ;
private function _ReloadComfortLids(  ) void ;
private function _SelectProcesses(  ) void ;
private function _SplitSequence( sequence & i_seq, sequence & o_seqMPH, sequence & o_seqChannels ) void ;
private function _SplitTubes( variable i_intNumberOfSamples, variable i_intMaxSamplesPerTube, variable i_fltVolumePerSample, variable i_fltVolumeOverage, variable i_fltTubeDeadVolume, variable i_fltCurrentReagentFractionalVolume, variable & o_arrTubeVolumes[] ) void ;
private function _VersionHistory(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private variable l_strChannelPatternAbort;
  private variable l_intResultTipCheck;
  VectorCustomDialogs::AppendStatusText(Translate("ĿĿĿĿĿĿĿĿMETHOD ABORTEDĿĿĿĿĿĿĿĿ"));
  if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_SendEmail(Translate("Method aborted"), Translate("Read report file and logfile. Clean the deck and empty the liquid waste."));
  }
  NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Method aborted"), ASWGLOBAL::BOOL::TRUE);
  AswStandardDialogs::Terminate();
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  NGSSTARPREP::HHS_Terminate(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2);
  NGSSTARPREP::CPAC_Terminate();
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_Terminate(t_intDeviceNumberODTC, ASWGLOBAL::BOOL::TRUE);
  }
  l_intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, l_strChannelPatternAbort, 8);
  if (l_intResultTipCheck == 1)
  {
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  VectorCustomDialogs::Terminate();
}

private function _VersionHistory(  ) void {
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Stranded mRNA Prep and Ligation \nBy:          Brannon Orr, Hamilton Reno, USA\nDate:      9/21/20\nVersion:  1.0\nBased on Kit provider Stranded mRNA Prep and Ligation Preparation Reference Guide\nVersion Notes:\n\n1. Completed development and simulation testing\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Stranded mRNA Prep and Ligation \nBy:          Brannon Orr, Hamilton Reno, USA\nDate:      10/27/20\nVersion:  1.0\nBased on Kit provider Stranded mRNA Prep and Ligation Preparation Reference Guide\nVersion Notes:\n\n1. Completed optimzation and water testing\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Stranded mRNA Prep and Ligation \nBy:          Brannon Orr, Hamilton Reno, USA\nDate:      9/1/21\nVersion:  1.0.0\nBased on Kit provider Stranded mRNA Prep and Ligation Preparation Reference Guide\nVersion Notes:\n\n1. Added logic to reload Comfort Lids if stack would be greater than six\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Stranded mRNA Prep and Ligation \nBy:          Brannon Orr, Hamilton Reno, USA\nDate:      3/1/22\nVersion:  1.0.0\nBased on Kit provider Stranded mRNA Prep and Ligation Preparation Reference Guide\nVersion Notes:\n\n1. Converted to NGS STAR MOA and 2.6 Framework\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Stranded mRNA Prep and Ligation \nBy:          Brannon Orr, Hamilton Reno, USA\nDate:      8/31/22\nVersion:  1.1.0\nBased on Kit provider Stranded mRNA Prep and Ligation Preparation Reference Guide\nVersion Notes:\n\n1. Bug fix to number of MIDI stack plates expected and passed to check function\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Stranded mRNA Prep and Ligation \nBy:          Brannon Orr, Hamilton Reno, USA\nDate:      10/06/22\nVersion:  1.2.0\nBased on Kit provider Stranded mRNA Prep and Ligation Preparation Reference Guide\nVersion Notes:\n\n1. Change container for RSB\n2. Add new PCR workflow for AmplifyLibrary...25 ng = 15 cycles, 100 ng = 13 cycles, 1000 ng = 10 cycles\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Stranded mRNA Prep and Ligation \nBy:          Brannon Orr, Hamilton Reno, USA\nDate:      11/20/22\nVersion:  1.3.0\nBased on Kit provider Stranded mRNA Prep and Ligation Preparation Reference Guide\nVersion Notes:\n\n1. Updated stack logic for Comfort Lid loading\n*************************************************************************************************************************************"));
}

private function _SelectProcesses(  ) void {
  private variable l_strFileInputWorklist;
  private variable l_strIndexLabwareFormat;
  private variable l_strPositionID;
  private variable l_intJunk;
  private variable l_varReturn;
  private variable l_strFWReturn;
  private variable l_blnODTCUsedUserPrompt;
  private variable l_strWorklistMessage;
  private variable l_bln_displayDialog3;
  private variable l_intWorklistUserConfirmation;
  private variable l_blnMPHUsedUserPrompt;
  private variable t_intProcessNextTouchPoint;
  private variable loopCounter1;
  private variable l_intSize;
  private variable loopCounter2;
  private sequence t_seqAdapterPlate_MPH;
  private sequence l_seqMatchCheck;
  private sequence t_seqAdapterPlate_Channels;
  private sequence l_seqMatchCheck_Channels;
  private sequence l_seqMatchCheck_MPH;
  private variable l_arr_intProcessDeactivatedStopPoints[];
  private variable t_arrAdapterLigationPlateLabwareID[];
  private variable t_arr_blnProcessTouchPoints[];
  private variable l_arrPositionIDLookup[];
  private variable l_arrMatchCheck_MPH[];
  private variable l_arr_intProcessDeactivatedStartPoints[];
  private variable t_arr_strProcessID[];
  private variable l_arr_strProcessCombinations[];
  private variable l_arrMatchCheck_Channels[];
  private variable l_arrTypes[];
  private variable l_arrLabels[];
  private variable l_arrResults[];
  private variable l_arrTips[];
  private variable l_arrValues[];
  private variable l_arrUnits[];
  private variable l_arrRanges[];
  t_arr_strProcessID.SetSize(0);
  l_bln_displayDialog3 = ASWGLOBAL::BOOL::FALSE;
  l_blnODTCUsedUserPrompt = ASWGLOBAL::BOOL::TRUE;
  NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(3, Translate("Is the ODTC Module used in this run?"), Translate("YES"));
  NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(3, Translate("Is the ODTC Module used in this run?"), Translate("NO"));
  l_bln_displayDialog3 = ASWGLOBAL::BOOL::TRUE;
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	l_strFWReturn = arrRetValues[3];
    }
    l_strFWReturn = StrFind(l_strFWReturn, Translate("er"));
    if (l_strFWReturn == -1)
    {
      l_blnMPHUsedUserPrompt = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      if (t_blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
      {
        l_blnMPHUsedUserPrompt = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        l_blnMPHUsedUserPrompt = ASWGLOBAL::BOOL::FALSE;
      }
    }
    if (l_blnMPHUsedUserPrompt == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(3, Translate("Is the 96 CO-RE HEAD (MPH) used in this run?"), Translate("YES"));
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(3, Translate("Is the 96 CO-RE HEAD (MPH) used in this run?"), Translate("NO"));
      l_bln_displayDialog3 = ASWGLOBAL::BOOL::TRUE;
    }
  }
  if (l_bln_displayDialog3 == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(3);
  }
  if (l_blnODTCUsedUserPrompt == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(3, Translate("Is the ODTC Module used in this run?"), l_int_OptionSelected);
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("l_int_OptionSelected ODTC: "), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      t_blnODTCused = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      t_blnODTCused = ASWGLOBAL::BOOL::FALSE;
    }
  }
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    if (l_blnMPHUsedUserPrompt == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(3, Translate("Is the 96 CO-RE HEAD (MPH) used in this run?"), l_int_OptionSelected);
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("l_int_OptionSelected MPH: "), l_int_OptionSelected);
      if (l_int_OptionSelected == 1)
      {
        t_blnMPHused = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        t_blnMPHused = ASWGLOBAL::BOOL::FALSE;
      }
    }
  }
  l_arrLabels.SetSize(0);
  l_arrLabels.AddAsLast(Translate("Float"));
  l_arrValues.SetSize(0);
  l_arrValues.AddAsLast(Translate("25"));
  l_arrUnits.SetSize(0);
  l_arrUnits.AddAsLast(Translate("ng"));
  l_arrTypes.SetSize(0);
  l_arrTypes.AddAsLast(3);
  l_arrRanges.SetSize(0);
  l_arrRanges.AddAsLast(Translate("25.0|1000.0"));
  l_arrTips.SetSize(0);
  l_arrTips.AddAsLast(Translate("Enter the input mass in the range between 25.0 and 1000.0 ng"));
  l_arrResults.SetSize(0);
  VectorCustomDialogs::InputDialog(Translate("Input Mass"), VectorCustomDialogs::ButtonType::OkCancel, 0, 1000, Translate("Enter the input mass of the samples."), Translate("This has an effect on the reagent addition in Ligate Anchors and on the PCR cycles in Amplify LIbrary.  Take care to run samples with similar input mass per run.  In Ligate anchors, The RSB, RNA Index Anchors, and LIGX reagent component ratios are dependent on input mass.  In Amplify Library, input mass determines the number of PCR cycles.  Input mass closest to 25 ng = 15 cycles, 100 ng = 13 cycles, and 1000 ng = 10 cycles."), l_arrLabels, l_arrValues, l_arrUnits, l_arrTypes, l_arrRanges, l_arrTips, l_arrResults);
  TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Selected Input Mass (ng): "), l_arrResults);
  t_fltInputSampleMass = l_arrResults.ElementAt( 1 -1);
  t_blnSampleInputMassOf25ng = ASWGLOBAL::BOOL::FALSE;
  t_blnSampleInputMassOf100ng = ASWGLOBAL::BOOL::FALSE;
  t_blnSampleInputMassOf1000ng = ASWGLOBAL::BOOL::FALSE;
  {//determine the closest mass category for the user input...25 ng, 100 ng, 1000 ng
    variable mid, input;
    input = l_arrResults.ElementAt(0);
    if(input <= 100)
       {
         mid = (100 - 25) / 2.0 + 25;
         if(input <= mid) t_blnSampleInputMassOf25ng = ASWGLOBAL::BOOL::TRUE;
         else t_blnSampleInputMassOf100ng = ASWGLOBAL::BOOL::TRUE;
       }
    else
       {
         mid = (1000 - 100) / 2.0 + 100;
         if(input <= mid) t_blnSampleInputMassOf100ng = ASWGLOBAL::BOOL::TRUE;
         else t_blnSampleInputMassOf1000ng = ASWGLOBAL::BOOL::TRUE;
       }
    Trace("t_blnSampleInputMassOf25ng: ",t_blnSampleInputMassOf25ng);
    Trace("t_blnSampleInputMassOf100ng: ",t_blnSampleInputMassOf100ng);
    Trace("t_blnSampleInputMassOf1000ng: ",t_blnSampleInputMassOf1000ng);
  }
  t_arr_strProcessID.AddAsLast(Translate("Process 1: Purify and Fragment Messenger RNA"));
  t_arr_strProcessID.AddAsLast(Translate("Process 2: Synthesize First Strand cDNA"));
  t_arr_strProcessID.AddAsLast(Translate("Process 3: Synthesize Second Strand cDNA"));
  t_arr_strProcessID.AddAsLast(Translate("Process 4: Adenylate 3' Ends"));
  t_arr_strProcessID.AddAsLast(Translate("Process 5: Ligate Anchors"));
  t_arr_strProcessID.AddAsLast(Translate("Process 6: Clean Up Fragments"));
  t_arr_strProcessID.AddAsLast(Translate("Process 7: Amplify Library"));
  t_arr_strProcessID.AddAsLast(Translate("Process 8: Clean Up Library"));
  l_arr_strProcessCombinations.SetSize(0);
  l_arr_intProcessDeactivatedStopPoints.SetSize(0);
  l_arr_intProcessDeactivatedStartPoints.SetSize(0);
  l_arr_strProcessCombinations.AddAsLast(Translate("1.2.3.4.5.6.7.8"));
  l_arr_strProcessCombinations.AddAsLast(Translate("2.3.4.5.6.7.8"));
  l_arr_strProcessCombinations.AddAsLast(Translate("3.4.5.6.7.8"));
  l_arr_strProcessCombinations.AddAsLast(Translate("4.5.6.7.8"));
  l_arr_strProcessCombinations.AddAsLast(Translate("5.6.7.8"));
  l_arr_strProcessCombinations.AddAsLast(Translate("6.7.8"));
  l_arr_strProcessCombinations.AddAsLast(Translate("7.8"));
  l_arr_strProcessCombinations.AddAsLast(Translate("8"));
  if (t_blnEnforceStepSelectionCheck == ASWGLOBAL::BOOL::TRUE)
  {
    l_arr_intProcessDeactivatedStopPoints.AddAsLast(1);
    l_arr_intProcessDeactivatedStopPoints.AddAsLast(2);
    l_arr_intProcessDeactivatedStopPoints.AddAsLast(4);
    l_arr_intProcessDeactivatedStopPoints.AddAsLast(5);
    l_arr_intProcessDeactivatedStartPoints.AddAsLast(2);
    l_arr_intProcessDeactivatedStartPoints.AddAsLast(3);
    l_arr_intProcessDeactivatedStartPoints.AddAsLast(5);
    l_arr_intProcessDeactivatedStartPoints.AddAsLast(6);
  }
  NGSSTARLOADING::Display_SelectProcesses_Dialog(1, t_arr_strProcessID, l_arr_strProcessCombinations, l_arr_intProcessDeactivatedStartPoints, l_arr_intProcessDeactivatedStopPoints, t_intSelectedIndexSTART, t_intSelectedIndexSTOP, t_arrBlnProcessActivation);
  t_intProcessNextTouchPoint = t_intSelectedIndexSTART;
  t_arr_blnProcessTouchPoints.SetSize(0);
  t_arr_blnProcessTouchPoints.AddAsLast(0);
  t_arr_blnProcessTouchPoints.AddAsLast(0);
  t_arr_blnProcessTouchPoints.AddAsLast(0);
  t_arr_blnProcessTouchPoints.AddAsLast(0);
  t_arr_blnProcessTouchPoints.AddAsLast(0);
  t_arr_blnProcessTouchPoints.AddAsLast(0);
  t_arr_blnProcessTouchPoints.AddAsLast(0);
  NGSSTARLOADING::Display_InputWorklist_Dialog(l_strFileInputWorklist);
  {
    loopCounter1 = 0;
    while (1 == 1)
    {
      loopCounter1 = loopCounter1 + 1;
      Trace ("Selected input worklist :", l_strFileInputWorklist);
      NGSSTARPREP::DATA_ReadInputWorklistExcelOrCSVFormat(l_strFileInputWorklist, ML_STAR.HSP_Pipette2, t_intNumberOfSamplesFromFile, l_intJunk, t_arrIndex1PositionIDs, t_arrIndex1IDs, t_arrAdapterLigationPlateLabwareID, t_arrAdapterLigationPlatePositionIDs, l_strIndexLabwareFormat);
      l_strWorklistMessage = StrConcat12(Translate("The worklist "), l_strFileInputWorklist, Translate(" has been imported."), Translate("\n\nA total of "), t_intNumberOfSamplesFromFile, Translate(" samples have been selected for processing. "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      l_intWorklistUserConfirmation = VectorCustomDialogs::MessageDialog(Translate("User confirmation of worklist"), 2, 1, 0, 0, 0, l_strWorklistMessage);
      if (l_intWorklistUserConfirmation == ASWGLOBAL::DIALOG::ABORT)
      {
        abort;
      }
      NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrIndex1PositionIDs, t_seqIndexPlate, 1);
      if (t_blnMPHused == ASWGLOBAL::BOOL::TRUE)
      {
        l_arrMatchCheck_MPH.SetSize(0);
        l_arrMatchCheck_Channels.SetSize(0);
        _SplitSequence(t_seqIndexPlate, t_seqIndexPlate_MPH, t_seqIndexPlate_Channels);
        {
          loopCounter2 = 0;
          while (
             (t_seqIndexPlate_MPH.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, t_seqIndexPlate_MPH, 1);
            loopCounter2 = loopCounter2 + 1;
            l_strPositionID = SeqGetPositionId(t_seqIndexPlate_MPH);
            l_arrPositionIDLookup = HSLExtensions::Array::FindValue(t_arrIndex1PositionIDs, l_strPositionID);
            l_strPositionID=t_arrAdapterLigationPlatePositionIDs.GetAt(l_arrPositionIDLookup.ElementAt( 1 -1)-1);
            l_arrMatchCheck_MPH.AddAsLast(l_strPositionID);
            SeqIncrement(t_seqIndexPlate_MPH, 1);
            if (
               (t_seqIndexPlate_MPH.GetCurrentPosition() > 0 && t_seqIndexPlate_MPH.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          t_seqIndexPlate_MPH.SetMax(t_seqIndexPlate_MPH.GetTotal());
          t_seqIndexPlate_MPH.SetCurrentPosition(1);
        }
        NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, l_arrMatchCheck_MPH, l_seqMatchCheck, 1);
        _SplitSequence(l_seqMatchCheck, l_seqMatchCheck_MPH, l_seqMatchCheck_Channels);
        l_intSize = SeqGetTotal(l_seqMatchCheck_Channels);
        if (l_intSize > 0)
        {
          SeqRemoveAll(t_seqIndexPlate_MPH);
          SeqRemoveAll(t_seqIndexPlate_Channels);
          SeqCopySequence(t_seqIndexPlate_Channels, t_seqIndexPlate);
          NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arrAdapterLigationPlatePositionIDs, t_seqAdapterPlate_Channels, 1);
        }
        else
        {
          NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, l_arrMatchCheck_MPH, t_seqAdapterPlate_MPH, 1);
          {
            loopCounter2 = 0;
            while (
               (t_seqIndexPlate_Channels.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, t_seqIndexPlate_Channels, 1);
              loopCounter2 = loopCounter2 + 1;
              l_strPositionID = SeqGetPositionId(t_seqIndexPlate_Channels);
              l_arrPositionIDLookup = HSLExtensions::Array::FindValue(t_arrIndex1PositionIDs, l_strPositionID);
              l_strPositionID=t_arrAdapterLigationPlatePositionIDs.GetAt(l_arrPositionIDLookup.ElementAt( 1 -1)-1);
              l_arrMatchCheck_Channels.AddAsLast(l_strPositionID);
              SeqIncrement(t_seqIndexPlate_Channels, 1);
              if (
                 (t_seqIndexPlate_Channels.GetCurrentPosition() > 0 && t_seqIndexPlate_Channels.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            t_seqIndexPlate_Channels.SetMax(t_seqIndexPlate_Channels.GetTotal());
            t_seqIndexPlate_Channels.SetCurrentPosition(1);
          }
          NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, l_arrMatchCheck_Channels, t_seqAdapterPlate_Channels, 1);
        }
        l_varReturn = SeqGetTotal(t_seqIndexPlate_MPH);
        if (l_varReturn != t_intNumberOfSamplesFromFile)
        {
          MECC::TraceComment(Translate("Plates cannot be fully stamped by MPH.  Warn user and get confirmation to process some steps in part with channels - supernatant removal, index addition.  "));
          VectorCustomDialogs::SetButtonResources(Translate("Ok"), Translate("Abort"), Translate("Ok"), Translate("Retry"), Translate("Abort"), Translate("Retry"), Translate("Accept"), Translate("Ignore"));
          l_varReturn = VectorCustomDialogs::MessageDialog(Translate("xGen UDI Primer Pairs"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::YesNoCancel, 0, 0, 0, Translate("The positions specified by the worklist cannot be fully stamped by the MPH.\n\nSelect Ok to acknowledge and process some steps by both MPH and Channels, Retry to correct worklist and retry, and Abort to end method."));
          VectorCustomDialogs::SetButtonResources(Translate("Ok"), Translate("Cancel"), Translate("Yes"), Translate("No"), Translate("Abort"), Translate("Retry"), Translate("Accept"), Translate("Ignore"));
          if (l_varReturn == ASWGLOBAL::DIALOG::YES)
          {
            break;
          }
          if (l_varReturn == ASWGLOBAL::DIALOG::NO)
          {
            NGSSTARLOADING::Display_InputWorklist_Dialog(l_strFileInputWorklist);
          }
          if (l_varReturn == ASWGLOBAL::DIALOG::CANCEL)
          {
            abort;
          }
        }
        else
        {
          break;
        }
      }
      else
      {
        break;
      }
    }
  }
  if (t_blnMPHused == ASWGLOBAL::BOOL::TRUE)
  {
    MECC::TraceComment(Translate("Index Plate MPH sequence"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, t_seqIndexPlate_MPH);
    MECC::TraceComment(Translate("Adapter Plate MPH sequence"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, t_seqAdapterPlate_MPH);
    MECC::TraceComment(Translate("Index Plate Channels sequence"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, t_seqIndexPlate_Channels);
    MECC::TraceComment(Translate("Adapter Plate Channels sequence"));
    TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, t_seqAdapterPlate_Channels);
  }
}

private function _CalculateAndLoadConsumables(  ) void {
  private variable l_intNumberOfChannelsToUse;
  private variable l_intNumberOfBatches;
  private variable l_intBatchRemainderTips;
  private variable l_intBatchRemainder;
  private variable l_intNumberOfInstalledChannels;
  private variable l_varBucket;
  private variable l_fltVol;
  private variable l_strMMName;
  private variable l_intNumberOfTubes;
  private variable t_arrEPH3Volumes[];
  private variable t_arrNFWVolumes[];
  private variable t_arrBWBVolumes[];
  private variable t_arrELBVolumes[];
  private variable t_arrBBBVolumes[];
  private variable t_arrRVTVolumes[];
  private variable t_arrFSAVolumes[];
  private variable t_arrSMMVolumes[];
  private variable t_arrATL4Volumes[];
  private variable t_arrSTLVolumes[];
  private variable t_arrLIGXVolumes[];
  private variable t_arrEPMVolumes[];
  private sequence t_seqEtOH_distinct;
  private variable t_arrEtOHVolumes[];
  private sequence l_arr_seqReagentsOn50mLContainers[];
  private sequence t_seqBeads_distinct;
  private variable l_arr_fltReagentVolumesOn50mLContainers[];
  private variable l_arr_strReagentNamesOn50mLContainers[];
  private variable t_arrBeadsVolume[];
  private sequence l_arr_seqReagentsOn50mlContainers[];
  private variable l_blnReloadToRefillTroughsRequested;
  private variable l_intReturn;
  private variable l_intButton;
  private variable l_strReturn;
  private variable l_intTotalPlates;
  private variable loopCounter1;
  private variable loopCounter2;
  private variable l_strFullPathLoadingPicture;
  private variable l_arr_strReagentNamesOn50mlContainers[];
  private variable l_arr_fltReagentVolumesOn50mlContainers[];
  private sequence t_seqRVT_distinct;
  private sequence t_seqFSA_distinct;
  private sequence t_seqSMM_distinct;
  private sequence t_seqEPM_distinct;
  private sequence t_seqLIGX_distinct;
  private sequence t_seqEPH3;
  private sequence t_seqATL4_distinct;
  private sequence t_seqSTL_distinct;
  private sequence t_seqRVT;
  private sequence t_seqEPH3_distinct;
  private sequence t_seqFSA;
  private sequence t_seqNFW_distinct;
  private sequence t_seqELB_distinct;
  private sequence t_seqBBB_distinct;
  private sequence t_seqBWB_distinct;
  private variable l_fltZ;
  private variable l_fltX;
  private variable l_fltY;
  private variable l_intTotalNumberOfComfortLid;
  private variable l_intNumberOfPlatesInStack1;
  private variable l_intNumberOfPlatesInStack2;
  private variable l_intNumberOfPlatesInStack3;
  private sequence t_seqRSB_ATL_distinct;
  private sequence t_seqRSB_SecondStrandSynthesis_distinct;
  private variable t_arrRSB_ATLVolumes[];
  private variable t_arrRSB_SecondStrandSynthesisVolumes[];
  private variable l_intNumberOfMMTubes;
  private variable l_intSize;
  MECC::TraceComment(Translate("--------------- CalculateAndLoadConsumables"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Calculate and load consumables"), ASWGLOBAL::BOOL::TRUE);
  l_intNumberOfInstalledChannels = HSLExtensions::Venus::GetNumberOfChannels(ML_STAR);
  if (t_blnMPHused == ASWGLOBAL::BOOL::FALSE)
  {
    t_intNumberOfColumnsInBatchProcessing = 3;
  }
  else
  {
    t_intNumberOfColumnsInBatchProcessing = 3;
  }
  l_intNumberOfBatches = t_intNumberOfColumnsInBatchProcessing * 8;
  l_intBatchRemainder = l_intNumberOfBatches;
  l_intNumberOfBatches = t_intNumberOfSamplesFromFile / l_intNumberOfBatches;
  l_intBatchRemainder = t_intNumberOfSamplesFromFile % l_intBatchRemainder;
  l_intBatchRemainderTips = MthMin(l_intNumberOfInstalledChannels, l_intBatchRemainder);
  l_intNumberOfChannelsToUse = MthMin(l_intNumberOfInstalledChannels, t_intNumberOfSamplesFromFile);
  MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------\nVariables for all processes\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
  l_varBucket = 0;
  l_intTotalNumberOfComfortLid = 0;
  if (t_intNGSPlatform == 2)
  {
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::DW_Magnet, Translate("Alpaqua Magnum FLX Ring Magnet (without springs, PN A000405)"), 1, ML_STAR.MIDI_OnMagnet, 0);
  }
  MECC::TraceComment(Translate("---------------------------------------------------------------------------\nM1_PurifyAndFragmentMessengerRNA\n---------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    Trace ("Total calculated volumes of reagents for M1_DenatureRNA for ", t_intNumberOfSamplesFromFile, " samples");
    t_fltSample_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("Sample"), 25.0);
    l_intNumberOfTubes = t_intNumberOfSamplesFromFile / (24 * 1.0);
    l_intNumberOfTubes = MthCeiling(l_intNumberOfTubes);
    t_fltRPBX_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("RPBX"), 25.0);
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("RPBX"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 30, 10, ML_STAR.CAR_VIALS_SMALL, 1, l_intNumberOfTubes, t_seqRPBX_distinct, t_seqRPBX, t_arrRPBXVolumes);
    t_fltBWB_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("BWB"), 100.0);
    t_fltBWB_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("BWB"), 100.0);
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("BWB"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 50000, 3000, 10, ML_STAR.RGT_BWB, 4, 0, t_seqBWB_distinct, t_seqBWB, t_arrBWBVolumes);
    t_fltELB_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("ELB"), 25.0);
    l_intNumberOfTubes = t_intNumberOfSamplesFromFile / (32 * 1.0);
    l_intNumberOfTubes = MthCeiling(l_intNumberOfTubes);
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("ELB"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 30, 10, ML_STAR.CAR_VIALS_SMALL, 5, l_intNumberOfTubes, t_seqELB_distinct, t_seqELB, t_arrELBVolumes);
    t_fltBBB_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("BBB"), 25.0);
    l_intNumberOfTubes = t_intNumberOfSamplesFromFile / (96 * 1.0);
    l_intNumberOfTubes = MthCeiling(l_intNumberOfTubes);
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("BBB"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Tube5mL, 5000, 30, 10, ML_STAR.CAR_VIALS_LARGE, 1, l_intNumberOfTubes, t_seqBBB_distinct, t_seqBBB, t_arrBBBVolumes);
    l_strMMName = Translate("Fragmentation Master Mix");
    t_fltFragmentationMM_Volume = NGSSTARLOADING::Define_VolumePerWell(l_strMMName, 19.0);
    l_fltVol = 0;
    {
      variable NFW(10.5),EPH3(10.5),FMM(t_fltFragmentationMM_Volume);
      variable sum(NFW + EPH3);
      l_fltVol = NFW / sum * FMM;
    }
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(l_strMMName, Translate("Nuclease Free Water"), l_fltVol);
    {
      variable NFW(10.5),EPH3(10.5),FMM(t_fltFragmentationMM_Volume);
      variable sum(NFW + EPH3);
      l_fltVol = EPH3 / sum * FMM;
    }
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(l_strMMName, Translate("EPH3"), l_fltVol);
    l_intNumberOfTubes = t_intNumberOfSamplesFromFile / (48 * 1.0);
    l_intNumberOfMMTubes = MthCeiling(l_intNumberOfTubes);
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, l_strMMName, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 30, 10, ML_STAR.CPAC_2mLTubes_0001, 1, l_intNumberOfMMTubes, t_seqFragmentationMM_distinct, t_seqFragmentationMM, t_arrFragmentationMMVolumes);
    if (t_blnBuildMMOnDeck == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfTubes = t_intNumberOfSamplesFromFile / (96 * 1.0);
      l_intNumberOfTubes = MthCeiling(l_intNumberOfTubes);
      NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Nuclease Free Water"), l_intNumberOfMMTubes, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 30, 10, ML_STAR.CAR_VIALS_SMALL, 8, l_intNumberOfTubes, t_seqNFW_distinct, t_seqNFW, t_arrNFWVolumes);
      NGSSTARLOADING::MMPrep_GetSequencesAndVolumes(Translate("Nuclease Free Water"), t_seqNFW_MMAsp, t_seqNFW_MMDsp, t_arrNFW_MMVolumes);
      l_intNumberOfTubes = t_intNumberOfSamplesFromFile / (24 * 1.0);
      l_intNumberOfTubes = MthCeiling(l_intNumberOfTubes);
      if (l_intNumberOfTubes == 3)
      {
        l_intNumberOfTubes = 4;
      }
      NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("EPH3"), l_intNumberOfMMTubes, ARW_Global::LabwareType::Sarstedt_Tube_500uL, 500, 30, 10, ML_STAR.CAR_VIALS_SMALL, 9, l_intNumberOfTubes, t_seqEPH3_distinct, t_seqEPH3, t_arrEPH3Volumes);
      NGSSTARLOADING::MMPrep_GetSequencesAndVolumes(Translate("EPH3"), t_seqEPH3_MMAsp, t_seqEPH3_MMDsp, t_arrEPH3_MMVolumes);
    }
    t_fltSupernatant_M1_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("M1 Product Supernatant"), 17.0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Plate with 25.0 킠 of sample containing 10-1000 ng total RNA per well"), 1, ML_STAR.HSP_Pipette2, 0);
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTotalNumberOfComfortLid = l_intTotalNumberOfComfortLid + 3;
      if (l_intTotalNumberOfComfortLid <= ARW_Global::StackDefinition::NumberOfUnitsStack_Comfortlid)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, Translate("Comfort Lid"), 3, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      }
    }
    t_intRequiredNumberOf50uLTipsM1 = t_intNumberOfSamplesFromFile * 6;
    t_intRequiredNumberOf50uLTipsM1 = t_intRequiredNumberOf50uLTipsM1 + l_intNumberOfChannelsToUse;
    t_intRequiredNumberOf300uLTipsM1 = t_intNumberOfSamplesFromFile * 6;
    l_varBucket = l_intNumberOfChannelsToUse * 2;
    t_intRequiredNumberOf300uLTipsM1 = t_intRequiredNumberOf300uLTipsM1 + l_varBucket;
    l_varBucket = t_seqRPBX_distinct.GetCount();
    t_intRequiredNumberOf1000uLTipsM1 = 1 * l_varBucket;
    if (t_blnBuildMMOnDeck == ASWGLOBAL::BOOL::TRUE)
    {
      l_varBucket=t_arrNFW_MMVolumes.GetSize();
      t_intRequiredNumberOf1000uLTipsM1 = t_intRequiredNumberOf1000uLTipsM1 + l_varBucket;
      l_varBucket=t_arrEPH3_MMVolumes.GetSize();
      t_intRequiredNumberOf300uLTipsM1 = t_intRequiredNumberOf300uLTipsM1 + l_varBucket;
      l_varBucket=t_arrFragmentationMMVolumes.GetSize();
      t_intRequiredNumberOf1000uLTipsM1 = t_intRequiredNumberOf1000uLTipsM1 + l_varBucket;
    }
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, t_intRequiredNumberOf50uLTipsM1, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, t_intRequiredNumberOf300uLTipsM1, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, t_intRequiredNumberOf1000uLTipsM1, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Empty"), 3, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, Translate("Empty"), 2, ML_STAR.Stack_MIDI, 0);
  }
  else
  {
    t_fltSupernatant_M1_Volume = 17.0;
  }
  MECC::TraceComment(Translate("---------------------------------------------------------------------------\nM2_SynthesizeFirstStrandCDNA\n---------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    Trace ("Total calculated volumes of reagents for M2_SynthesizeFirstStrandCDNA for ", t_intNumberOfSamplesFromFile, " samples");
    l_strMMName = Translate("First Strand Synthesis Master Mix");
    t_fltFirstStrandSynthesisMM_Volume = NGSSTARLOADING::Define_VolumePerWell(l_strMMName, 8.0);
    l_fltVol = 0;
    {
      variable FSA(9.0),RVT(1.0),FSS(t_fltFirstStrandSynthesisMM_Volume);
      variable sum(FSA + RVT);
      l_fltVol = FSA / sum * FSS;
    }
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(l_strMMName, Translate("FSA"), l_fltVol);
    {
      variable FSA(9.0),RVT(1.0),FSS(t_fltFirstStrandSynthesisMM_Volume);
      variable sum(FSA + RVT);
      l_fltVol = RVT / sum * FSS;
    }
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(l_strMMName, Translate("RVT"), l_fltVol);
    l_intNumberOfTubes = t_intNumberOfSamplesFromFile / (96 * 1.0);
    l_intNumberOfMMTubes = MthCeiling(l_intNumberOfTubes);
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, l_strMMName, t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2100, 30, 10, ML_STAR.CPAC_2mLTubes_0001, 3, l_intNumberOfMMTubes, t_seqFirstStrandSynthesisMM_distinct, t_seqFirstStrandSynthesisMM, t_arrFirstStrandSynthesisMMVolumes);
    if (t_blnBuildMMOnDeck == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfTubes = t_intNumberOfSamplesFromFile / (24 * 1.0);
      l_intNumberOfTubes = MthCeiling(l_intNumberOfTubes);
      if (l_intNumberOfTubes == 3)
      {
        l_intNumberOfTubes = 4;
      }
      NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("FSA"), l_intNumberOfMMTubes, ARW_Global::LabwareType::Sarstedt_Tube_500uL, 500, 30, 10, ML_STAR.CPAC_2mLTubes_0001, 5, l_intNumberOfTubes, t_seqFSA_distinct, t_seqFSA, t_arrFSAVolumes);
      NGSSTARLOADING::MMPrep_GetSequencesAndVolumes(Translate("FSA"), t_seqFSA_MMAsp, t_seqFSA_MMDsp, t_arrFSA_MMVolumes);
      l_intNumberOfTubes = t_intNumberOfSamplesFromFile / (96 * 1.0);
      l_intNumberOfTubes = MthCeiling(l_intNumberOfTubes);
      NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("RVT"), l_intNumberOfMMTubes, ARW_Global::LabwareType::Sarstedt_Tube_500uL, 500, 30, 10, ML_STAR.CPAC_2mLTubes_0001, 4, l_intNumberOfTubes, t_seqRVT_distinct, t_seqRVT, t_arrRVTVolumes);
      NGSSTARLOADING::MMPrep_GetSequencesAndVolumes(Translate("RVT"), t_seqRVT_MMAsp, t_seqRVT_MMDsp, t_arrRVT_MMVolumes);
    }
    if (t_blnEnforceStepSelectionCheck == ASWGLOBAL::BOOL::FALSE)
    {
      if (t_arrBlnProcessActivation.ElementAt( 1 -1) != ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Plate with 17.0 킠 of product per well"), 1, ML_STAR.HSP_Pipette2, 0);
      }
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTotalNumberOfComfortLid = l_intTotalNumberOfComfortLid + 1;
      if (l_intTotalNumberOfComfortLid <= ARW_Global::StackDefinition::NumberOfUnitsStack_Comfortlid)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, Translate("Comfort Lid"), 1, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      }
    }
    t_intRequiredNumberOf50uLTipsM2 = t_intNumberOfSamplesFromFile * 1;
    t_intRequiredNumberOf300uLTipsM2 = 0 * 0;
    t_intRequiredNumberOf1000uLTipsM2 = 0 * 0;
    if (t_blnBuildMMOnDeck == ASWGLOBAL::BOOL::TRUE)
    {
      l_varBucket=t_arrFSA_MMVolumes.GetSize();
      t_intRequiredNumberOf300uLTipsM2 = t_intRequiredNumberOf300uLTipsM2 + l_varBucket;
      l_varBucket=t_arrRVT_MMVolumes.GetSize();
      t_intRequiredNumberOf300uLTipsM2 = t_intRequiredNumberOf300uLTipsM2 + l_varBucket;
      l_varBucket=t_arrFirstStrandSynthesisMMVolumes.GetSize();
      t_intRequiredNumberOf1000uLTipsM2 = t_intRequiredNumberOf1000uLTipsM2 + l_varBucket;
    }
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, t_intRequiredNumberOf50uLTipsM2, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, t_intRequiredNumberOf300uLTipsM2, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, t_intRequiredNumberOf1000uLTipsM2, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Empty"), 0, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, Translate("Empty"), 0, ML_STAR.Stack_MIDI, 0);
  }
  else
  {
    t_fltFirstStrandSynthesisMM_Volume = 8.0;
  }
  MECC::TraceComment(Translate("---------------------------------------------------------------------------\nM3_SynthesizeSecondStrandCDNA\n---------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    Trace ("Total calculated volumes of reagents for M3_SynthesizeSecondStrandCDNA for ", t_intNumberOfSamplesFromFile, " samples");
    t_fltSMM_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("SMM"), 25.0);
    l_intNumberOfTubes = t_intNumberOfSamplesFromFile / (24 * 1.0);
    l_intNumberOfTubes = MthCeiling(l_intNumberOfTubes);
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("SMM"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 30, 10, ML_STAR.CPAC_2mLTubes_0001, 9, l_intNumberOfTubes, t_seqSMM_distinct, t_seqSMM, t_arrSMMVolumes);
    t_fltAMPureXPBeads_M3_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("AMPure XP Beads"), 90.0);
    t_fltEthanol_M3_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("EtOH 80%"), 175.0);
    t_fltEthanol_M3_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("EtOH 80%"), 175.0);
    t_fltRSB_M3_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("RSB in Synthesize Second Strand cDNA"), 19.5);
    l_intNumberOfTubes = t_intNumberOfSamplesFromFile / (48 * 1.0);
    l_intNumberOfTubes = MthCeiling(l_intNumberOfTubes);
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("RSB in Synthesize Second Strand cDNA"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 30, 10, ML_STAR.CAR_VIALS_SMALL, 13, l_intNumberOfTubes, t_seqRSB_SecondStrandSynthesis_distinct, t_seqRSB_SecondStrandSynthesis, t_arrRSB_SecondStrandSynthesisVolumes);
    t_fltSupernatant_M3_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("M3 Product Supernatant"), 17.5);
    if (t_blnEnforceStepSelectionCheck == ASWGLOBAL::BOOL::FALSE)
    {
      if (t_arrBlnProcessActivation.ElementAt( 1 -1) != ASWGLOBAL::BOOL::TRUE)
      {
        if (t_arrBlnProcessActivation.ElementAt( 2 -1) != ASWGLOBAL::BOOL::TRUE)
        {
          NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Plate with 25.0 킠 of product per well"), 1, ML_STAR.HSP_Pipette2, 0);
        }
      }
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTotalNumberOfComfortLid = l_intTotalNumberOfComfortLid + 1;
      if (l_intTotalNumberOfComfortLid <= ARW_Global::StackDefinition::NumberOfUnitsStack_Comfortlid)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, Translate("Comfort Lid"), 1, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      }
    }
    t_intRequiredNumberOf50uLTipsM3 = t_intNumberOfSamplesFromFile * 2;
    t_intRequiredNumberOf300uLTipsM3 = t_intNumberOfSamplesFromFile * 5;
    t_intRequiredNumberOf1000uLTipsM3 = l_intNumberOfBatches * l_intNumberOfChannelsToUse;
    t_intRequiredNumberOf1000uLTipsM3 = t_intRequiredNumberOf1000uLTipsM3 + l_intBatchRemainderTips;
    t_intRequiredNumberOf1000uLTipsM3 = t_intRequiredNumberOf1000uLTipsM3 * 2;
    t_intRequiredNumberOf1000uLTipsM3 = t_intRequiredNumberOf1000uLTipsM3 + l_intNumberOfInstalledChannels;
    t_intRequiredNumberOf50uLTipsM3 = t_intRequiredNumberOf50uLTipsM3 + t_intNumberOfSamplesFromFile;
    if (t_blnPreMixByOverturn == ASWGLOBAL::BOOL::TRUE)
    {
      t_intRequiredNumberOf1000uLTipsM3 = t_intRequiredNumberOf1000uLTipsM3 + l_intNumberOfInstalledChannels;
    }
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, t_intRequiredNumberOf50uLTipsM3, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, t_intRequiredNumberOf300uLTipsM3, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, t_intRequiredNumberOf1000uLTipsM3, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Empty"), 1, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, Translate("Empty"), 1, ML_STAR.Stack_MIDI, 0);
  }
  else
  {
    t_fltSupernatant_M3_Volume = 17.5;
  }
  MECC::TraceComment(Translate("---------------------------------------------------------------------------\nM4_Adenylate3Ends\n---------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    Trace ("Total calculated volumes of reagents for M4_Adenylate3Ends for ", t_intNumberOfSamplesFromFile, " samples");
    t_fltATL4_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("ATL4"), 12.5);
    l_intNumberOfTubes = t_intNumberOfSamplesFromFile / (24 * 1.0);
    l_intNumberOfTubes = MthCeiling(l_intNumberOfTubes);
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("ATL4"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_500uL, 500, 30, 10, ML_STAR.CAR_VIALS_SMALL, 15, l_intNumberOfTubes, t_seqATL4_distinct, t_seqATL4, t_arrATL4Volumes);
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) != ASWGLOBAL::BOOL::TRUE)
    {
      if (t_arrBlnProcessActivation.ElementAt( 2 -1) != ASWGLOBAL::BOOL::TRUE)
      {
        if (t_arrBlnProcessActivation.ElementAt( 3 -1) != ASWGLOBAL::BOOL::TRUE)
        {
          NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Plate with 17.5 킠 of product per well"), 1, ML_STAR.HSP_Pipette2, 0);
        }
      }
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTotalNumberOfComfortLid = l_intTotalNumberOfComfortLid + 1;
      if (l_intTotalNumberOfComfortLid <= ARW_Global::StackDefinition::NumberOfUnitsStack_Comfortlid)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, Translate("Comfort Lid"), 1, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      }
    }
    t_intRequiredNumberOf50uLTipsM4 = t_intNumberOfSamplesFromFile * 1;
    t_intRequiredNumberOf300uLTipsM4 = 0 * 0;
    t_intRequiredNumberOf1000uLTipsM4 = 0 * 0;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, t_intRequiredNumberOf50uLTipsM4, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, t_intRequiredNumberOf300uLTipsM4, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, t_intRequiredNumberOf1000uLTipsM4, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Empty"), 0, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, Translate("Empty"), 0, ML_STAR.Stack_MIDI, 0);
  }
  else
  {
    t_fltATL4_Volume = 12.5;
  }
  MECC::TraceComment(Translate("---------------------------------------------------------------------------\nM5_LigateAnchors\n---------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    Trace ("Total calculated volumes of reagents for M5_LigateAnchors for ", t_intNumberOfSamplesFromFile, " samples");
    if (t_fltInputSampleMass <= 100.0)
    {
      t_fltRSB_M5_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("RSB in ATL"), 2.5);
    }
    else
    {
      t_fltRSB_M5_Volume = 0.0;
    }
    if (t_fltInputSampleMass <= 100.0)
    {
      t_fltRNAIndexAnchors_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("RNA Index Anchors"), 2.5);
    }
    else
    {
      t_fltRNAIndexAnchors_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("RNA Index Anchors"), 5.0);
    }
    t_fltLIGX_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("LIGX"), 2.5);
    l_intNumberOfTubes = t_intNumberOfSamplesFromFile / (24 * 1.0);
    l_intNumberOfTubes = MthCeiling(l_intNumberOfTubes);
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("LIGX"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_500uL, 500, 30, 10, ML_STAR.CPAC_2mLTubes_0001, 13, l_intNumberOfTubes, t_seqLIGX_distinct, t_seqLIGX, t_arrLIGXVolumes);
    t_fltSTL_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("STL"), 5.0);
    l_intNumberOfTubes = t_intNumberOfSamplesFromFile / (24 * 1.0);
    l_intNumberOfTubes = MthCeiling(l_intNumberOfTubes);
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("STL"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_500uL, 500, 30, 10, ML_STAR.CAR_VIALS_SMALL, 23, l_intNumberOfTubes, t_seqSTL_distinct, t_seqSTL, t_arrSTLVolumes);
    if (t_blnEnforceStepSelectionCheck == ASWGLOBAL::BOOL::FALSE)
    {
      if (t_arrBlnProcessActivation.ElementAt( 1 -1) != ASWGLOBAL::BOOL::TRUE)
      {
        if (t_arrBlnProcessActivation.ElementAt( 2 -1) != ASWGLOBAL::BOOL::TRUE)
        {
          if (t_arrBlnProcessActivation.ElementAt( 3 -1) != ASWGLOBAL::BOOL::TRUE)
          {
            if (t_arrBlnProcessActivation.ElementAt( 4 -1) != ASWGLOBAL::BOOL::TRUE)
            {
              NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Plate with 30.0 킠 of product per well"), 1, ML_STAR.HSP_Pipette2, 0);
            }
          }
        }
      }
    }
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("RNA Index Anchors Plate"), 1, ML_STAR.HSP_Pipette, 0);
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTotalNumberOfComfortLid = l_intTotalNumberOfComfortLid + 1;
      if (l_intTotalNumberOfComfortLid <= ARW_Global::StackDefinition::NumberOfUnitsStack_Comfortlid)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, Translate("Comfort Lid"), 1, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      }
    }
    if (t_fltInputSampleMass <= 100.0)
    {
      t_intRequiredNumberOf50uLTipsM5 = t_intNumberOfSamplesFromFile * 4;
    }
    else
    {
      t_intRequiredNumberOf50uLTipsM5 = t_intNumberOfSamplesFromFile * 3;
    }
    t_intRequiredNumberOf300uLTipsM5 = 0 * 0;
    t_intRequiredNumberOf1000uLTipsM5 = 0 * 0;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, t_intRequiredNumberOf50uLTipsM5, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, t_intRequiredNumberOf300uLTipsM5, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, t_intRequiredNumberOf1000uLTipsM5, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Empty"), 0, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, Translate("Empty"), 0, ML_STAR.Stack_MIDI, 0);
  }
  else
  {
    if (t_fltInputSampleMass <= 100.0)
    {
      t_fltRSB_M5_Volume = 2.5;
      t_fltRNAIndexAnchors_Volume = 2.5;
    }
    else
    {
      t_fltRSB_M5_Volume = 0.0;
      t_fltRNAIndexAnchors_Volume = 5.0;
    }
    t_fltLIGX_Volume = 2.5;
    t_fltSTL_Volume = 5.0;
  }
  MECC::TraceComment(Translate("---------------------------------------------------------------------------\nM6_CleanUpFragments\n---------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    Trace ("Total calculated volumes of reagents for M6_CleanUpFragments for ", t_intNumberOfSamplesFromFile, " samples");
    t_fltAMPureXPBeads_M6_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("AMPure XP Beads"), 34.0);
    t_fltEthanol_M6_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("EtOH 80%"), 175.0);
    t_fltEthanol_M6_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("EtOH 80%"), 175.0);
    t_fltRSB_M6_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("RSB in ATL"), 22.0);
    t_fltSupernatant_M6_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("M6 Product Supernatant"), 20.0);
    if (t_blnEnforceStepSelectionCheck == ASWGLOBAL::BOOL::FALSE)
    {
      if (t_arrBlnProcessActivation.ElementAt( 1 -1) != ASWGLOBAL::BOOL::TRUE)
      {
        if (t_arrBlnProcessActivation.ElementAt( 2 -1) != ASWGLOBAL::BOOL::TRUE)
        {
          if (t_arrBlnProcessActivation.ElementAt( 3 -1) != ASWGLOBAL::BOOL::TRUE)
          {
            if (t_arrBlnProcessActivation.ElementAt( 4 -1) != ASWGLOBAL::BOOL::TRUE)
            {
              if (t_arrBlnProcessActivation.ElementAt( 5 -1) != ASWGLOBAL::BOOL::TRUE)
              {
                NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Plate with 42.5 킠 of product per well"), 1, ML_STAR.HSP_Pipette2, 0);
              }
            }
          }
        }
      }
    }
    t_intRequiredNumberOf50uLTipsM6 = t_intNumberOfSamplesFromFile * 2;
    t_intRequiredNumberOf300uLTipsM6 = t_intNumberOfSamplesFromFile * 5;
    t_intRequiredNumberOf1000uLTipsM6 = l_intNumberOfBatches * l_intNumberOfChannelsToUse;
    t_intRequiredNumberOf1000uLTipsM6 = t_intRequiredNumberOf1000uLTipsM6 + l_intBatchRemainderTips;
    t_intRequiredNumberOf1000uLTipsM6 = t_intRequiredNumberOf1000uLTipsM6 * 2;
    t_intRequiredNumberOf1000uLTipsM6 = t_intRequiredNumberOf1000uLTipsM6 + l_intNumberOfInstalledChannels;
    if (t_blnPreMixByOverturn == ASWGLOBAL::BOOL::TRUE)
    {
      t_intRequiredNumberOf1000uLTipsM6 = t_intRequiredNumberOf1000uLTipsM6 + l_intNumberOfInstalledChannels;
    }
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, t_intRequiredNumberOf50uLTipsM6, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, t_intRequiredNumberOf300uLTipsM6, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, t_intRequiredNumberOf1000uLTipsM6, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Empty"), 1, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, Translate("Empty"), 1, ML_STAR.Stack_MIDI, 0);
  }
  else
  {
    t_fltSupernatant_M6_Volume = 20.0;
  }
  MECC::TraceComment(Translate("---------------------------------------------------------------------------\nM7_AmplifyLibrary\n---------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 7 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    Trace ("Total calculated volumes of reagents for M7_AmplifyLibrary for ", t_intNumberOfSamplesFromFile, " samples");
    t_fltIndexAdapter_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("RNA Index Adapters"), 10.0);
    t_fltEPM_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("EPM"), 20.0);
    l_intNumberOfTubes = t_intNumberOfSamplesFromFile / (24 * 1.0);
    l_intNumberOfTubes = MthCeiling(l_intNumberOfTubes);
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("EPM"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 30, 10, ML_STAR.CPAC_2mLTubes_0001, 17, l_intNumberOfTubes, t_seqEPM_distinct, t_seqEPM, t_arrEPMVolumes);
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) != ASWGLOBAL::BOOL::TRUE)
    {
      if (t_arrBlnProcessActivation.ElementAt( 2 -1) != ASWGLOBAL::BOOL::TRUE)
      {
        if (t_arrBlnProcessActivation.ElementAt( 3 -1) != ASWGLOBAL::BOOL::TRUE)
        {
          if (t_arrBlnProcessActivation.ElementAt( 4 -1) != ASWGLOBAL::BOOL::TRUE)
          {
            if (t_arrBlnProcessActivation.ElementAt( 5 -1) != ASWGLOBAL::BOOL::TRUE)
            {
              if (t_arrBlnProcessActivation.ElementAt( 6 -1) != ASWGLOBAL::BOOL::TRUE)
              {
                NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Plate with 20.0 킠 of product per well"), 1, ML_STAR.HSP_Pipette2, 0);
              }
            }
          }
        }
      }
    }
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::FALSE)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("RNA Index Adapters Plate"), 1, ML_STAR.HSP_Pipette, 0);
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      l_intTotalNumberOfComfortLid = l_intTotalNumberOfComfortLid + 1;
      if (l_intTotalNumberOfComfortLid <= ARW_Global::StackDefinition::NumberOfUnitsStack_Comfortlid)
      {
        NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, Translate("Comfort Lid"), 1, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
      }
    }
    t_intRequiredNumberOf50uLTipsM7 = t_intNumberOfSamplesFromFile * 2;
    t_intRequiredNumberOf300uLTipsM7 = 0 * 0;
    t_intRequiredNumberOf1000uLTipsM7 = 0 * 0;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, t_intRequiredNumberOf50uLTipsM7, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, t_intRequiredNumberOf300uLTipsM7, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, t_intRequiredNumberOf1000uLTipsM7, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Empty"), 0, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, Translate("Empty"), 0, ML_STAR.Stack_MIDI, 0);
  }
  else
  {
    t_fltIndexAdapter_Volume = 10.0;
    t_fltEPM_Volume = 20.0;
  }
  MECC::TraceComment(Translate("---------------------------------------------------------------------------\nM8_CleanUpLibrary\n---------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 8 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    Trace ("Total calculated volumes of reagents for M8_CleanUpLibrary for ", t_intNumberOfSamplesFromFile, " samples");
    t_fltAMPureXPBeads_M8_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("AMPure XP Beads"), 50.0);
    t_fltEthanol_M8_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("EtOH 80%"), 175.0);
    t_fltEthanol_M8_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("EtOH 80%"), 175.0);
    t_fltRSB_M8_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("RSB in ATL"), 17.0);
    t_fltSupernatant_M8_Volume = NGSSTARLOADING::Define_VolumePerWell(Translate("M8 Product Supernatant"), 15.0);
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) != ASWGLOBAL::BOOL::TRUE)
    {
      if (t_arrBlnProcessActivation.ElementAt( 2 -1) != ASWGLOBAL::BOOL::TRUE)
      {
        if (t_arrBlnProcessActivation.ElementAt( 3 -1) != ASWGLOBAL::BOOL::TRUE)
        {
          if (t_arrBlnProcessActivation.ElementAt( 4 -1) != ASWGLOBAL::BOOL::TRUE)
          {
            if (t_arrBlnProcessActivation.ElementAt( 5 -1) != ASWGLOBAL::BOOL::TRUE)
            {
              if (t_arrBlnProcessActivation.ElementAt( 6 -1) != ASWGLOBAL::BOOL::TRUE)
              {
                if (t_arrBlnProcessActivation.ElementAt( 7 -1) != ASWGLOBAL::BOOL::TRUE)
                {
                  NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Plate with 50.0 킠 of product per well"), 1, ML_STAR.HSP_Pipette2, 0);
                }
              }
            }
          }
        }
      }
    }
    t_intRequiredNumberOf50uLTipsM8 = t_intNumberOfSamplesFromFile * 2;
    t_intRequiredNumberOf300uLTipsM8 = t_intNumberOfSamplesFromFile * 5;
    t_intRequiredNumberOf1000uLTipsM8 = l_intNumberOfBatches * l_intNumberOfChannelsToUse;
    t_intRequiredNumberOf1000uLTipsM8 = t_intRequiredNumberOf1000uLTipsM8 + l_intBatchRemainderTips;
    t_intRequiredNumberOf1000uLTipsM8 = t_intRequiredNumberOf1000uLTipsM8 * 2;
    t_intRequiredNumberOf1000uLTipsM8 = t_intRequiredNumberOf1000uLTipsM8 + l_intNumberOfInstalledChannels;
    if (t_blnPreMixByOverturn == ASWGLOBAL::BOOL::TRUE)
    {
      t_intRequiredNumberOf1000uLTipsM8 = t_intRequiredNumberOf1000uLTipsM8 + l_intNumberOfInstalledChannels;
    }
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, t_intRequiredNumberOf50uLTipsM8, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, t_intRequiredNumberOf300uLTipsM8, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, t_intRequiredNumberOf1000uLTipsM8, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Empty"), 1, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, Translate("Empty"), 1, ML_STAR.Stack_MIDI, 0);
  }
  else
  {
  }
  if (t_blnMeasureVolumeWithinTroughs == ASWGLOBAL::BOOL::TRUE)
  {
  }
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("EtOH 80%"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 60000, 3000, 10, ML_STAR.RGT_EtOH, 0, 0, t_seqEtOH_distinct, t_seqEtOH, t_arrEtOHVolumes);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("AMPure XP Beads"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 60000, 3000, 10, ML_STAR.RGT_Beads, 0, 0, t_seqBeads_distinct, t_seqBeads, t_arrBeadsVolume);
  l_intSize=t_arrBeadsVolume.GetSize();
  if (l_intSize > 0)
  {
    t_fltAMPureXPBeadsVolume = t_arrBeadsVolume.ElementAt( 1 -1);
  }
  l_intNumberOfTubes = t_intNumberOfSamplesFromFile / (24 * 1.0);
  l_intNumberOfTubes = MthCeiling(l_intNumberOfTubes);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("RSB in ATL"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 30, 10, ML_STAR.CAR_VIALS_SMALL, 19, l_intNumberOfTubes, t_seqRSB_ATL_distinct, t_seqRSB_ATL, t_arrRSB_ATLVolumes);
  MECC::TraceComment(Translate("After all liquids have been defined..the evaluate step calculates the needed resources\n"));
  NGSSTARLOADING::Evaluate_ResourcesByCarrier();
  NGSSTARLOADING::Retrieve_50mlTrough_ReagentsVolumesAndSequences(l_arr_strReagentNamesOn50mLContainers, l_arr_fltReagentVolumesOn50mLContainers, l_arr_seqReagentsOn50mLContainers);
  if (t_blnBuildMMOnDeck == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARLOADING::Display_Mastermix_Dialog();
  }
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.Ham_ComfortLid_ODTC, t_arrAdapterLigationPlatePositionIDs, t_trpHamiltonComfortLidODTC, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.Ham_ComfortLid_Stack_ParkPos, t_arrAdapterLigationPlatePositionIDs, t_trpHamiltonComfortLidStackParkPos, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.Ham_ComfortLid_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpHamiltonComfortLidWaste, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS1_HSP, t_arrAdapterLigationPlatePositionIDs, t_seqHHS1_HSP, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS1_HSP, t_arrAdapterLigationPlatePositionIDs, t_trpHHS1_HSP, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS2_HSP, t_arrAdapterLigationPlatePositionIDs, t_seqHHS2_HSP, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS2_HSP, t_arrAdapterLigationPlatePositionIDs, t_trpHHS2_HSP, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_HSP, t_arrAdapterLigationPlatePositionIDs, t_seqHHS3_HSP, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_HSP, t_arrAdapterLigationPlatePositionIDs, t_trpHHS3_HSP, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_seqHHS3_MIDI, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_trpHHS3_MIDI, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS4_MIDI, t_arrAdapterLigationPlatePositionIDs, t_seqHHS4_MIDI, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS4_MIDI, t_arrAdapterLigationPlatePositionIDs, t_trpHHS4_MIDI, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS5_MIDI, t_arrAdapterLigationPlatePositionIDs, t_seqHHS5_MIDI, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS5_MIDI, t_arrAdapterLigationPlatePositionIDs, t_trpHHS5_MIDI, 2);
  _SplitSequence(t_seqHHS1_HSP, t_seqHHS1_HSP_MPH, t_seqHHS1_HSP_Channels);
  _SplitSequence(t_seqHHS2_HSP, t_seqHHS2_HSP_MPH, t_seqHHS2_HSP_Channels);
  _SplitSequence(t_seqHHS3_HSP, t_seqHHS3_HSP_MPH, t_seqHHS3_HSP_Channels);
  _SplitSequence(t_seqHHS3_MIDI, t_seqHHS3_MIDI_MPH, t_seqHHS3_MIDI_Channels);
  _SplitSequence(t_seqHHS4_MIDI, t_seqHHS4_MIDI_MPH, t_seqHHS4_MIDI_Channels);
  _SplitSequence(t_seqHHS5_MIDI, t_seqHHS5_MIDI_MPH, t_seqHHS5_MIDI_Channels);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Pipette, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_Pipette2, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Pipette2, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_ODTC, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_ODTC, 2);
  _SplitSequence(t_seqHSP_Pipette, t_seqHSP_Pipette_MPH, t_seqHSP_Pipette_Channels);
  _SplitSequence(t_seqHSP_Pipette2, t_seqHSP_Pipette2_MPH, t_seqHSP_Pipette2_Channels);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arrAdapterLigationPlatePositionIDs, t_seqMIDI_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_Pipette, 2);
  _SplitSequence(t_seqMIDI_Pipette, t_seqMIDI_Pipette_MPH, t_seqMIDI_Pipette_Channels);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.DW_Pipette, t_arrAdapterLigationPlatePositionIDs, t_seqDW_Pipette, 1);
  _SplitSequence(t_seqDW_Pipette, t_seqDW_Pipette_MPH, t_seqDW_Pipette_Channels);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_seqMIDI_OnMagnet, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_OnMagnet, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_OnMagnet, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_OnMagnet, 2);
  _SplitSequence(t_seqMIDI_OnMagnet, t_seqMIDI_OnMagnet_MPH, t_seqMIDI_OnMagnet_Channels);
  _SplitSequence(t_seqHSP_OnMagnet, t_seqHSP_OnMagnet_MPH, t_seqHSP_OnMagnet_Channels);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_Waste, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Waste, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Waste_CORE, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_WasteCORE, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Waste_CORE, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_WasteCORE, 2);
  MECC::TraceComment(Translate("Setting sequences completed"));
  SeqRemoveAll(t_trpStack_MIDI);
  SeqRemoveAll(t_trpStack4);
  SeqRemoveAll(t_trpHamiltonComfortLidStackParkPos);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfMIDI, ML_STAR.Stack_MIDI, t_trpStack_MIDI, 3, ML_STAR);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfHSP, ML_STAR.Stack4, t_trpStack4, 6, ML_STAR);
  if (g_int_TotalNumberOfMIDI > 3)
  {
    l_intNumberOfPlatesInStack1 = 3;
    if (g_int_TotalNumberOfMIDI > 6)
    {
      l_intNumberOfPlatesInStack2 = 3;
      l_intNumberOfPlatesInStack3 = g_int_TotalNumberOfMIDI - 6;
    }
    else
    {
      l_intNumberOfPlatesInStack2 = g_int_TotalNumberOfMIDI - 3;
      l_intNumberOfPlatesInStack3 = 0;
    }
  }
  else
  {
    l_intNumberOfPlatesInStack1 = g_int_TotalNumberOfMIDI;
    l_intNumberOfPlatesInStack2 = 0;
    l_intNumberOfPlatesInStack3 = 0;
  }
  t_intNumberOfHamiltonComfortLidsReload = 0;
  t_intNumberOfHamiltonComfortLidsReload = l_intTotalNumberOfComfortLid - ARW_Global::StackDefinition::NumberOfUnitsStack_Comfortlid;
  if (t_intNumberOfHamiltonComfortLidsReload > 0)
  {
    l_intTotalNumberOfComfortLid = ARW_Global::StackDefinition::NumberOfUnitsStack_Comfortlid;
  }
  STACKREDUCER::StackReducer(l_intTotalNumberOfComfortLid, ML_STAR.Ham_ComfortLid_Stack_ParkPos, t_trpHamiltonComfortLidStackParkPos, ARW_Global::StackDefinition::NumberOfUnitsStack_Comfortlid, ML_STAR);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, t_trpStack_MIDI);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, t_trpStack4);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, t_trpHamiltonComfortLidStackParkPos);
  if (t_blnODTCused == 1)
  {
    NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::ODTC, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("ODTCHamiltonComforlidPosition.jpg"), Translate(""), Translate(""));
    if (t_intNumberOfHamiltonComfortLidsReload > 0)
    {
      VectorCustomDialogs::MessageDialog(Translate("Reload Comfort Lids"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Cannot load enough Comfort Lids to complete the full process.  A reload step will be provided."));
    }
  }
  l_intTotalPlates = g_int_TotalNumberOfHSP + g_int_TotalNumberOfMIDI;
  if (l_intTotalPlates > 0)
  {
    {
      loopCounter2 = 0;
      while (1 == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::PLT_Stack, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("PlateStackerCarrier2.png"), Translate("PlateStackerCarrier_SubImage.jpg"), Translate(""));
        if (t_blnSimulationMode == ASWGLOBAL::BOOL::FALSE)
        {
          NGSSTARPROCESSES::DATA_CheckPlatesInStacks_TeachingNeedles(ML_STAR, ML_STAR.Stack1, ML_STAR.Stack2, ML_STAR.Stack3, ML_STAR.Stack4, l_intNumberOfPlatesInStack1, l_intNumberOfPlatesInStack2, l_intNumberOfPlatesInStack3, g_int_TotalNumberOfHSP, 0.5, 0.5, 0.5, 0.8, l_intReturn, l_strReturn);
          if (l_intReturn == 0)
          {
            Trace(l_strReturn);
            break;
          }
          else
          {
            Trace(l_strReturn);
            l_intButton = VectorCustomDialogs::MessageDialog(Translate("Plate Stack Check"), VectorCustomDialogs::IconType::Error, VectorCustomDialogs::ButtonType::RetryCancel, 0, 0, 0, l_strReturn);
            if (l_intButton == ASWGLOBAL::DIALOG::CANCEL)
            {
              abort;
            }
          }
        }
        else
        {
          break;
        }
      }
    }
  }
  if (t_intNGSPlatform == 2)
  {
    NGSSTARLOADING::Load_Carrier_MultiTipSeq(ML_STAR, ARW_Global::CarrierType::TIP50_02, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("Tip50ulFilterCarriers.jpg"), Translate("TIP_50_1000.jpg"));
  }
  else
  {
    NGSSTARLOADING::Load_Carrier_MultiTipSeq(ML_STAR, ARW_Global::CarrierType::TIP50_02, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("Tip50ulFilterCarriers.jpg"), Translate("TIP_50.png"));
  }
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if (t_intNGSPlatform == 2)
  {
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIPAdapter, ARW_Global::LabwareType::TIPAdapter, 1, ML_STAR.TipSupport_0001, 0);
    NGSSTARLOADING::Load_Carrier_MultiTipSeq(ML_STAR, ARW_Global::CarrierType::TIP300_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("Tip300ulFilterCarriers.jpg"), Translate("Core96_TipSupport_Tip_300.jpg"));
  }
  else
  {
    NGSSTARLOADING::Load_Carrier_MultiTipSeq(ML_STAR, ARW_Global::CarrierType::TIP300_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("Tip300ulFilterCarriers.jpg"), Translate(""));
  }
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  {
    loopCounter1 = 0;
    while (1 == 1)
    {
      loopCounter1 = loopCounter1 + 1;
      l_strFullPathLoadingPicture = Translate("C:\Program Files (x86)\HAMILTON\NGSStarMOA\Illumina\Stranded mRNA Prep and Ligation\Library\NGSStarLoading\NGSStarMPHPictures\ReagentContainerCarrier1.jpg");
      NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::RGT1, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("ReagentContainerCarrier1.jpg"), Translate(""), Translate(""));
      if (t_blnMeasureVolumeWithinTroughs == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::PIP_CheckForSufficientVolumeIn50mlTroughs(ML_STAR, l_arr_strReagentNamesOn50mlContainers, l_arr_fltReagentVolumesOn50mlContainers, l_arr_seqReagentsOn50mlContainers, l_blnReloadToRefillTroughsRequested);
        if (l_blnReloadToRefillTroughsRequested == ASWGLOBAL::BOOL::FALSE)
        {
          break;
        }
      }
      else
      {
        break;
      }
    }
  }
  {
    loopCounter1 = 0;
    while (1 == 1)
    {
      loopCounter1 = loopCounter1 + 1;
      l_strFullPathLoadingPicture = Translate("C:\Program Files (x86)\HAMILTON\NGSStarMOA\Illumina\Stranded mRNA Prep and Ligation\Library\NGSStarLoading\NGSStarMPHPictures\ReagentContainerCarrier2.jpg");
      NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::RGT2, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("ReagentContainerCarrier2.jpg"), Translate(""), Translate(""));
      if (t_blnMeasureVolumeWithinTroughs == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::PIP_CheckForSufficientVolumeIn50mlTroughs(ML_STAR, l_arr_strReagentNamesOn50mlContainers, l_arr_fltReagentVolumesOn50mlContainers, l_arr_seqReagentsOn50mlContainers, l_blnReloadToRefillTroughsRequested);
        if (l_blnReloadToRefillTroughsRequested == ASWGLOBAL::BOOL::FALSE)
        {
          break;
        }
      }
      else
      {
        break;
      }
    }
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Tube_Carrier24, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("CarrierVial24.jpg"), Translate(""), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Vial_Carrier32_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("CarrierVial32_1.jpg"), Translate(""), Translate(""));
  LPQ::LABWARE_GetCurrentPosition(ML_STAR, ML_STAR.HSP_OnMagnet, l_fltX, l_fltY, l_fltZ);
  LPQ::ADJUST_MoveLabwareToDeckSite(ML_STAR, Translate("HSP_OnMagnet"), Translate("MFX_CAR_2HHS30MIDI"), Translate("MAGNET"));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::PLT_MFX, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("MFXCarrier.png"), Translate(""), Translate(""));
  LPQ::ADJUST_MoveLabwareToDeckSite(ML_STAR, Translate("HSP_OnMagnet"), Translate("MFX_CAR_2MTP_HPTab_MIDI_HPTab_2DWP_HPTab"), Translate("5_DWP_HPTab"));
  LPQ::ADJUST_SetAbsolutePosition(ML_STAR, ML_STAR.HSP_OnMagnet, l_fltX, l_fltY, l_fltZ, 0);
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::CPAC, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("CPACCarrier.jpg"), Translate(""), Translate(""));
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  else
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  NGSSTARLOADING::Display_Message_Dialog(Translate("The deck loading is complete. Please close the door."));
}

private function _SplitTubes( variable i_intNumberOfSamples, variable i_intMaxSamplesPerTube, variable i_fltVolumePerSample, variable i_fltVolumeOverage, variable i_fltTubeDeadVolume, variable i_fltCurrentReagentFractionalVolume, variable & o_arrTubeVolumes[] ) void {
  o_arrTubeVolumes.SetSize(0);
  {
    variable i, j, k, m, n, o;
    //How many mix tubes
    j = MthCeiling(i_intNumberOfSamples / (i_intMaxSamplesPerTube * 1.0));
    //if(j == 3) j = 4;  Only if limiting the possibilities for the number of tubes
    //With respect to the number of mix tubes, how many full sets of transfers
    k = i_intNumberOfSamples / j;
    //With respect to the number of mix tubes, how many extra single transfers
    m = i_intNumberOfSamples % j;
    //Trace(j,"-",k,"-",m,"-",n);
    //Build current volume array
    for(i = 1; i <= j; i++)
       {
         if(m > 0)
            {
              n = k + 1;
            }
         else
            {
              n = k;
            }
         o_arrTubeVolumes.AddAsLast((n * i_fltVolumePerSample * i_fltVolumeOverage) + (i_fltTubeDeadVolume * i_fltCurrentReagentFractionalVolume));
         m = m - 1;
       }
    //Util2::Debug::TraceArray("o_arrTubeVolumes", o_arrTubeVolumes);
  }
}

private function M02_SynthesizeFirstStrandCDNA(  ) void {
  private variable l_fltDispenseMixVolume;
  private dialog customDialog_1;
  private variable l_intValueDialog;
  private variable l_intCurrentPosition;
  private variable l_fltAspirationMixVolume;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  Synthesize First Strand cDNA********************\n*************************************************************************************************************************"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("SUBMETHOD START:  Synthesize First Strand cDNA"), ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM2, t_intRequiredNumberOf300uLTipsM2, t_intRequiredNumberOf1000uLTipsM2, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeTracking = t_fltSupernatant_M1_Volume;
  if (t_blnBuildMMOnDeck == ASWGLOBAL::BOOL::TRUE)
  {
    MECC::TraceComment(Translate("************* Prepare First Strand Synthesis MM.............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Prepare First Strand Synthesis MM..."));
    MECC::TraceComment(Translate("************* Now transferring FSA .............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Transferring FSA to First Strand Synthesis MM Tube..."));
    l_fltDispenseMixVolume = l_fltDispenseMixVolume * 0.7;
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlateWithVolumeArray(ML_STAR, t_seqFSA_MMAsp, t_seqFSA_MMDsp, t_arrFSA_MMVolumes, Translate("RNAMessenger_SVF_FSA_SurfaceEmpty"), 0, 0, 3.0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
    MECC::TraceComment(Translate("************* Now transferring RVT .............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Transferring RVT to First Strand Synthesis MM Tube..."));
    l_fltDispenseMixVolume = l_fltDispenseMixVolume * 0.7;
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlateWithVolumeArray(ML_STAR, t_seqRVT_MMAsp, t_seqRVT_MMDsp, t_arrRVT_MMVolumes, Translate("RNAMessenger_SVF_RVT_SurfaceEmpty"), 0, 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    l_fltAspirationMixVolume = t_arrFirstStrandSynthesisMMVolumes.ElementAt( 1 -1) * 0.7;
    NGSSTARPROCESSES::PIP_MixOnly(ML_STAR, t_seqFirstStrandSynthesisMM_distinct, 0, Translate("RNAMessenger_HVF_SMBPremix_SurfaceEmpty"), 10, l_fltAspirationMixVolume);
  }
  MECC::TraceComment(Translate("************* Now transferring First Strand Synthesis MM .............."));
  VectorCustomDialogs::AppendStatusText(Translate("   Transferring First Strand Synthesis MM to HSP..."));
  l_fltDispenseMixVolume = t_fltVolumeTracking + t_fltFirstStrandSynthesisMM_Volume;
  l_fltDispenseMixVolume = l_fltDispenseMixVolume * 0.7;
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqFirstStrandSynthesisMM, t_seqHSP_Pipette2, t_fltFirstStrandSynthesisMM_Volume, Translate("RNAMessenger_50F_FirstStrandSynthesisMM_SurfaceEmpty"), 10, 0, l_fltDispenseMixVolume, 0, 3.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltFirstStrandSynthesisMM_Volume;
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("   Transport HSP to ODTC and run thermocycling program..."));
    l_intCurrentPosition = t_trpHamiltonComfortLidStackParkPos.GetCurrentPosition();
    if (l_intCurrentPosition == 0)
    {
      _ReloadComfortLids();
    }
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intMethodTimeODTC, t_intRequestIDODTC);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, t_strCurrentPlateBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath, t_arrODTCMethodNames.ElementAt( 5 -1), t_intMethodTimeODTC, t_intRequestIDODTC, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intMethodTimeODTC, t_intRequestIDODTC);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, t_strCurrentPlateBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath, t_arrODTCMethodNames.ElementAt( 1 -1), t_intMethodTimeODTC, t_intRequestIDODTC, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    MECC::TraceComment(Translate("************* Unload HSP.............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Unload HSP..."));
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    l_intValueDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    if (l_intValueDialog == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    MECC::TraceComment(Translate("************* Load HSP.............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Load HSP..."));
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("SUBMETHOD COMPLETE:  Synthesize First Strand cDNA"), ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD COMPLETE:  Synthesize First Strand cDNA********************\n*************************************************************************************************************************"));
}

private function M03_SynthesizeSecondStrandCDNA(  ) void {
  private variable l_fltDispenseMixVolume;
  private variable l_strReturn;
  private variable l_blnReturn;
  private variable l_fltMixVolume;
  private variable l_fltOverAspiration;
  private dialog customDialog_2;
  private dialog customDialog_3;
  private variable l_intValueDialog;
  private variable l_intCurrentPosition;
  private variable l_fltVolumeConsumed;
  private variable l_intSeqSize;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  Synthesize Second Strand cDNA********************\n*************************************************************************************************************************"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("SUBMETHOD START:  Synthesize Second Strand cDNA"), ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM3, t_intRequiredNumberOf300uLTipsM3, t_intRequiredNumberOf1000uLTipsM3, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeTracking = t_fltSupernatant_M1_Volume + t_fltFirstStrandSynthesisMM_Volume;
  MECC::TraceComment(Translate("************* Now transferring SMM .............."));
  VectorCustomDialogs::AppendStatusText(Translate("   Transferring SMM to HSP..."));
  l_fltDispenseMixVolume = t_fltVolumeTracking + t_fltSMM_Volume;
  l_fltDispenseMixVolume = l_fltDispenseMixVolume * 0.7;
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqSMM, t_seqHSP_Pipette2, t_fltSMM_Volume, Translate("RNAMessenger_50F_SMM_SurfaceEmpty"), 10, 0, l_fltDispenseMixVolume, 0, 3.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltSMM_Volume;
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("   Transport HSP to ODTC and run thermocycling program..."));
    l_intCurrentPosition = t_trpHamiltonComfortLidStackParkPos.GetCurrentPosition();
    if (l_intCurrentPosition == 0)
    {
      _ReloadComfortLids();
    }
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intMethodTimeODTC, t_intRequestIDODTC);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, t_strCurrentPlateBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath, t_arrODTCMethodNames.ElementAt( 6 -1), t_intMethodTimeODTC, t_intRequestIDODTC, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intMethodTimeODTC, t_intRequestIDODTC);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, t_strCurrentPlateBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath, t_arrODTCMethodNames.ElementAt( 1 -1), t_intMethodTimeODTC, t_intRequestIDODTC, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    l_intValueDialog = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    if (l_intValueDialog == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  VectorCustomDialogs::AppendStatusText(Translate("   Transfer HSP product to MIDI for cleanup..."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpStack_MIDI, t_trpMIDI_Pipette, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  SeqIncrement(t_trpStack_MIDI, 1);
  l_fltOverAspiration = t_fltVolumeTracking + 10;
  if (t_blnMPHused == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, l_fltOverAspiration, Translate("RNAMessenger_SVF_Water_JetEmpty"), 0, 0, 0, 0.5, 3.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_MPH);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqHSP_Pipette2_MPH, t_seqMIDI_Pipette_MPH, l_fltOverAspiration, Translate("RNAMessenger_SVF_Water_JetEmpty"), l_intSeqSize, 0, 0.0, 0.0, 0.5, 3.0);
    }
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_Channels);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2_Channels, t_seqMIDI_Pipette_Channels, l_fltOverAspiration, Translate("RNAMessenger_SVF_Water_JetEmpty"), 0, 0, 0, 0.5, 3.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    }
  }
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette, t_trpHHS3_MIDI, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  if (t_blnPreMixByOverturn == ASWGLOBAL::BOOL::TRUE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("   Overturn mix..."));
    l_fltMixVolume = t_fltAMPureXPBeadsVolume / (8 * 1.0);
    l_fltMixVolume = l_fltMixVolume * 0.7;
    if (l_fltMixVolume > 1000)
    {
      l_fltMixVolume = 1000;
    }
    NGSSTARPROCESSES::PIP_MixBeadsByOverturn(ML_STAR, t_seqBeads, Translate("RNAMessenger_HVF_SMBPremix_SurfaceEmpty"), 3, 3, l_fltMixVolume, l_fltMixVolume, 2, 0, 1, l_blnReturn, l_strReturn);
  }
  VectorCustomDialogs::AppendStatusText(Translate("   Cleanup..."));
  l_fltOverAspiration = t_fltVolumeTracking + t_fltAMPureXPBeads_M3_Volume;
  l_fltOverAspiration = l_fltOverAspiration + 10;
  NGSSTARPROCESSES::Process_CleanUp_Combined(ML_STAR, t_seqBeads, t_seqBeads, t_seqHHS3_MIDI, t_seqEtOH, t_seqMIDI_OnMagnet, t_seqRSB_SecondStrandSynthesis, t_fltEthanol_M3_Volume, t_fltAMPureXPBeads_M3_Volume, t_fltRSB_M3_Volume, l_fltOverAspiration, Translate("RNAMessenger_SVF_AMPureBeads_SurfaceEmpty"), Translate("RNAMessenger_HVF_SMBPremix_SurfaceEmpty"), Translate("RNAMessenger_HVF_EtOH80_JetPart"), Translate("RNAMessenger_50F_RSB_JetEmpty"), Translate("RNAMessenger_SVF_Water_JetEmpty"), Translate("RNAMessenger_SVF_EtOHWaste_JetEmpty"), 1800, 1200, 90, 135, t_intNumberOfColumnsInBatchProcessing, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::TRUE, 300, 300, 120, 120, 120, t_blnMPHused);
  t_fltVolumeTracking = t_fltRSB_M3_Volume;
  l_fltVolumeConsumed = t_fltAMPureXPBeads_M3_Volume * t_intNumberOfSamplesFromFile;
  t_fltAMPureXPBeadsVolume = t_fltAMPureXPBeadsVolume - l_fltVolumeConsumed;
  VectorCustomDialogs::AppendStatusText(Translate("   Transfer MIDI product to HSP..."));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_WasteCORE, 0, ASWGLOBAL::BOOL::FALSE, t_strCurrentPlateBarcode, 4);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpStack4, t_trpHSP_Pipette2, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  SeqIncrement(t_trpStack4, 1);
  if (t_blnMPHused == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltSupernatant_M3_Volume, Translate("RNAMessenger_50F_CleanSample_JetEmpty"), 0, 0, 0, 0.5, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_MPH);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet_MPH, t_seqHSP_Pipette2_MPH, t_fltSupernatant_M3_Volume, Translate("RNAMessenger_50F_CleanSample_JetEmpty"), l_intSeqSize, 0, 0.0, 0.0, 0.5, 1.0);
    }
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_Channels);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet_Channels, t_seqHSP_Pipette2_Channels, t_fltSupernatant_M3_Volume, Translate("RNAMessenger_50F_CleanSample_JetEmpty"), 0, 0, 0, 0.5, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    }
  }
  t_fltVolumeTracking = t_fltSupernatant_M3_Volume;
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_WasteCORE, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::FALSE)
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("Synthesize Second Strand cDNA completed"), Translate("User stopped run after described process. Clean the deck and empty the liquid waste."));
    }
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    l_intValueDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("SUBMETHOD COMPLETE:  Synthesize Second Strand cDNA"), ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD COMPLETE:  Synthesize Second Strand cDNA********************\n*************************************************************************************************************************"));
}

private function M01_PurifyAndFragmentMessengerRNA(  ) void {
  private dialog customDialog_4;
  private variable l_intValueDialog;
  private variable l_fltDispenseMixVolume;
  private variable l_fltContainerClearanceHeight;
  private variable l_fltOverAspiration;
  private variable l_intCurrentPosition;
  private variable l_fltContainerHeight;
  private dialog customDialog_5;
  private dialog customDialog_6;
  private timer l_hdlMagnetIncubation;
  private variable l_intSeqSize;
  private variable l_fltAspirationMixVolume;
  private timer l_hdlHHSIncubation;
  private variable l_intSize;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  Purify And Fragment Messenger RNA********************\n*************************************************************************************************************************"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("SUBMETHOD START:  Purify And Fragment Messenger RNA"), ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM1, t_intRequiredNumberOf300uLTipsM1, t_intRequiredNumberOf1000uLTipsM1, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeTracking = t_fltSample_Volume;
  MECC::TraceComment(Translate("************* Now mixing RPBX .............."));
  VectorCustomDialogs::AppendStatusText(Translate("   Mixing RPBX..."));
  l_intSize=t_arrRPBXVolumes.GetSize();
  l_fltAspirationMixVolume = t_arrRPBXVolumes.ElementAt( l_intSize -1) * 0.7;
  NGSSTARPROCESSES::PIP_MixOnly(ML_STAR, t_seqRPBX_distinct, 0, Translate("RNAMessenger_HVF_SMBPremix_SurfaceEmpty"), 3, l_fltAspirationMixVolume);
  MECC::TraceComment(Translate("************* Now transferring RPBX .............."));
  VectorCustomDialogs::AppendStatusText(Translate("   Transferring RPBX to HSP..."));
  l_fltDispenseMixVolume = t_fltVolumeTracking + t_fltRPBX_Volume;
  l_fltDispenseMixVolume = l_fltDispenseMixVolume * 0.7;
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqRPBX, t_seqHSP_Pipette2, t_fltRPBX_Volume, Translate("RNAMessenger_SVF_RPBX_SurfaceEmpty"), 10, 0, l_fltDispenseMixVolume, 0, 3.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltRPBX_Volume;
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("   Transport HSP to ODTC and run thermocycling program..."));
    l_intCurrentPosition = t_trpHamiltonComfortLidStackParkPos.GetCurrentPosition();
    if (l_intCurrentPosition == 0)
    {
      _ReloadComfortLids();
    }
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intMethodTimeODTC, t_intRequestIDODTC);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, t_strCurrentPlateBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath, t_arrODTCMethodNames.ElementAt( 2 -1), t_intMethodTimeODTC, t_intRequestIDODTC, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intMethodTimeODTC, t_intRequestIDODTC);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, t_strCurrentPlateBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath, t_arrODTCMethodNames.ElementAt( 1 -1), t_intMethodTimeODTC, t_intRequestIDODTC, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    MECC::TraceComment(Translate("************* Unload HSP.............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Unload HSP..."));
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    l_intValueDialog = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    if (l_intValueDialog == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    MECC::TraceComment(Translate("************* Load HSP.............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Load HSP..."));
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  VectorCustomDialogs::AppendStatusText(Translate("   Transfer HSP product to MIDI for cleanup..."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpStack_MIDI, t_trpMIDI_Pipette, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  SeqIncrement(t_trpStack_MIDI, 1);
  l_fltOverAspiration = t_fltVolumeTracking + 10;
  l_fltAspirationMixVolume = t_fltVolumeTracking * 0.7;
  if (t_blnMPHused == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, l_fltOverAspiration, Translate("RNAMessenger_SVF_Water_JetEmpty"), 0, l_fltAspirationMixVolume, 0, 0.5, 3.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_MPH);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqHSP_Pipette2_MPH, t_seqMIDI_Pipette_MPH, l_fltOverAspiration, Translate("RNAMessenger_SVF_Water_JetEmpty"), l_intSeqSize, 0, l_fltAspirationMixVolume, 0.0, 0.5, 3.0);
    }
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_Channels);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2_Channels, t_seqMIDI_Pipette_Channels, l_fltOverAspiration, Translate("RNAMessenger_SVF_Water_JetEmpty"), 0, l_fltAspirationMixVolume, 0, 0.5, 3.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    }
  }
  VectorCustomDialogs::AppendStatusText(Translate("   Incubate on magnet and remove supernatant..."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette, t_trpMIDI_OnMagnet, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  NGSSTARPROCESSES::DATA_IncubationTimer(l_hdlMagnetIncubation, 120, 1);
  if (t_blnMPHused == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_fltVolumeTracking, Translate("RNAMessenger_SVF_Water_JetEmpty"));
  }
  else
  {
    l_intSeqSize = SeqGetTotal(t_seqMIDI_OnMagnet_MPH);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_MPH_Supernatant_SVFT_SingleDispenseFromPlateToWaste(ML_STAR, t_seqMIDI_OnMagnet_MPH, ML_STAR.MPH_LiquidWaste, t_fltVolumeTracking, Translate("RNAMessenger_SVF_Water_JetEmpty"), l_intSeqSize);
    }
    l_intSeqSize = SeqGetTotal(t_seqMIDI_OnMagnet_Channels);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, t_seqMIDI_OnMagnet_Channels, ML_STAR.LiquidWaste, t_fltVolumeTracking, Translate("RNAMessenger_SVF_Water_JetEmpty"));
    }
  }
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpHHS3_MIDI, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  VectorCustomDialogs::AppendStatusText(Translate("   Cleanup..."));
  l_fltOverAspiration = t_fltVolumeTracking + t_fltBWB_Volume;
  l_fltOverAspiration = l_fltOverAspiration + 10;
  NGSSTARPROCESSES::Process_SimpleCleanUp(ML_STAR, t_seqBWB, t_seqHHS3_MIDI, t_seqMIDI_OnMagnet, t_seqMIDI_Pipette, t_seqELB, t_trpMIDI_Pipette, t_fltBWB_Volume, l_fltOverAspiration, 0, 0, t_fltELB_Volume, Translate("RNAMessenger_SVF_BWB_DispenseJet_Empty"), Translate("RNAMessenger_SVF_Water_JetEmpty"), Translate(""), Translate("RNAMessenger_50F_RSB_JetEmpty"), 1800, 1200, 70, 110, t_intNumberOfColumnsInBatchProcessing, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::TRUE, 0, 120, 0, 0, 0, t_intNumberOfSamplesFromFile, t_blnMPHused);
  t_fltVolumeTracking = t_fltELB_Volume;
  VectorCustomDialogs::AppendStatusText(Translate("   Transfer MIDI product to HSP..."));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_WasteCORE, 0, ASWGLOBAL::BOOL::FALSE, t_strCurrentPlateBarcode, 4);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpStack4, t_trpHSP_Pipette2, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  SeqIncrement(t_trpStack4, 1);
  l_fltOverAspiration = t_fltVolumeTracking + 10;
  if (t_blnMPHused == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_Pipette, t_seqHSP_Pipette2, l_fltOverAspiration, Translate("RNAMessenger_50F_ElutedBeads_JetEmpty"), 0, 0, 0, 0.5, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_MPH);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_Pipette_MPH, t_seqHSP_Pipette2_MPH, l_fltOverAspiration, Translate("RNAMessenger_50F_ElutedBeads_JetEmpty"), l_intSeqSize, 0, 0.0, 0.0, 0.5, 1.0);
    }
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_Channels);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_Pipette_Channels, t_seqHSP_Pipette2_Channels, l_fltOverAspiration, Translate("RNAMessenger_50F_ElutedBeads_JetEmpty"), 0, 0, 0, 0.5, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    }
  }
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette, t_trpMIDI_WasteCORE, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("   Transport HSP to ODTC and run thermocycling program..."));
    l_intCurrentPosition = t_trpHamiltonComfortLidStackParkPos.GetCurrentPosition();
    if (l_intCurrentPosition == 0)
    {
      _ReloadComfortLids();
    }
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intMethodTimeODTC, t_intRequestIDODTC);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, t_strCurrentPlateBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath, t_arrODTCMethodNames.ElementAt( 3 -1), t_intMethodTimeODTC, t_intRequestIDODTC, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intMethodTimeODTC, t_intRequestIDODTC);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, t_strCurrentPlateBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath, t_arrODTCMethodNames.ElementAt( 1 -1), t_intMethodTimeODTC, t_intRequestIDODTC, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    MECC::TraceComment(Translate("************* Unload HSP.............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Unload HSP..."));
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    l_intValueDialog = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
    if (l_intValueDialog == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    MECC::TraceComment(Translate("************* Load HSP.............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Load HSP..."));
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  VectorCustomDialogs::AppendStatusText(Translate("   Transfer HSP product to MIDI for cleanup..."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpStack_MIDI, t_trpMIDI_Pipette, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  SeqIncrement(t_trpStack_MIDI, 1);
  l_fltOverAspiration = t_fltVolumeTracking + 10;
  if (t_blnMPHused == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, l_fltOverAspiration, Translate("RNAMessenger_50F_ElutedBeads_JetEmpty"), 0, 0, 0, 0.5, 3.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_MPH);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqHSP_Pipette2_MPH, t_seqMIDI_Pipette_MPH, l_fltOverAspiration, Translate("RNAMessenger_50F_ElutedBeads_JetEmpty"), l_intSeqSize, 0, 0.0, 0.0, 0.5, 3.0);
    }
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_Channels);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2_Channels, t_seqMIDI_Pipette_Channels, l_fltOverAspiration, Translate("RNAMessenger_50F_ElutedBeads_JetEmpty"), 0, 0, 0, 0.5, 3.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    }
  }
  MECC::TraceComment(Translate("************* Now transferring BBB .............."));
  VectorCustomDialogs::AppendStatusText(Translate("   Transferring BBB to MIDI..."));
  LPQ::CONT_GetContainerDepth(ML_STAR, ML_STAR.MIDI_Pipette, ASWGLOBAL::BOOL::FALSE, l_fltContainerHeight, l_fltContainerClearanceHeight);
  l_fltContainerHeight = l_fltContainerHeight - 2;
  l_fltDispenseMixVolume = t_fltVolumeTracking + t_fltBBB_Volume;
  l_fltDispenseMixVolume = l_fltDispenseMixVolume * 0.7;
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqBBB, t_seqMIDI_Pipette, t_fltBBB_Volume, Translate("RNAMessenger_50F_BBB_JetEmpty"), 0, 0, 0, 0, l_fltContainerHeight, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltBBB_Volume;
  MECC::TraceComment(Translate("************* Shake and incubate with BBB .............."));
  VectorCustomDialogs::AppendStatusText(Translate("   Shake and incubate on HHS..."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette, t_trpHHS3_MIDI, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  NGSSTARPREP::HHS_Shake(t_intHHS3_HSP3_MIDI3, 1800, 70);
  NGSSTARPROCESSES::DATA_IncubationTimer(l_hdlHHSIncubation, 300, 2);
  if (t_blnBuildMMOnDeck == ASWGLOBAL::BOOL::TRUE)
  {
    MECC::TraceComment(Translate("************* Prepare Fragmentation MM.............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Prepare Fragmentation MM..."));
    MECC::TraceComment(Translate("************* Now transferring NFW .............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Transferring NFW to Fragmentation MM Tube..."));
    l_fltDispenseMixVolume = l_fltDispenseMixVolume * 0.7;
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlateWithVolumeArray(ML_STAR, t_seqNFW_MMAsp, t_seqNFW_MMDsp, t_arrNFW_MMVolumes, Translate("RNAMessenger_HVF_NFW_SurfaceEmpty"), 0, 0, 3.0, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
    MECC::TraceComment(Translate("************* Now transferring EPH3 .............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Transferring EPH3 to Fragmentation MM Tube..."));
    l_fltDispenseMixVolume = l_fltDispenseMixVolume * 0.7;
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlateWithVolumeArray(ML_STAR, t_seqEPH3_MMAsp, t_seqEPH3_MMDsp, t_arrEPH3_MMVolumes, Translate("RNAMessenger_SVF_EPH3_SurfaceEmpty"), 0, 0, 0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    l_fltAspirationMixVolume = t_arrFragmentationMMVolumes.ElementAt( 1 -1) * 0.7;
    NGSSTARPROCESSES::PIP_MixOnly(ML_STAR, t_seqFragmentationMM_distinct, 0, Translate("RNAMessenger_HVF_SMBPremix_SurfaceEmpty"), 10, l_fltAspirationMixVolume);
  }
  NGSSTARPROCESSES::DATA_IncubationTimer(l_hdlHHSIncubation, 300, 3);
  VectorCustomDialogs::AppendStatusText(Translate("   Incubate on magnet and remove supernatant..."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpHHS3_MIDI, t_trpMIDI_OnMagnet, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  NGSSTARPROCESSES::DATA_IncubationTimer(l_hdlMagnetIncubation, 120, 1);
  if (t_blnMPHused == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_fltVolumeTracking, Translate("RNAMessenger_SVF_Water_JetEmpty"));
  }
  else
  {
    l_intSeqSize = SeqGetTotal(t_seqMIDI_OnMagnet_MPH);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_MPH_Supernatant_SVFT_SingleDispenseFromPlateToWaste(ML_STAR, t_seqMIDI_OnMagnet_MPH, ML_STAR.MPH_LiquidWaste, t_fltVolumeTracking, Translate("RNAMessenger_SVF_Water_JetEmpty"), l_intSeqSize);
    }
    l_intSeqSize = SeqGetTotal(t_seqMIDI_OnMagnet_Channels);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_Supernatant_SVFTSingleDispenseFromPlateToLiquidWaste(ML_STAR, t_seqMIDI_OnMagnet_Channels, ML_STAR.LiquidWaste, t_fltVolumeTracking, Translate("RNAMessenger_SVF_Water_JetEmpty"));
    }
  }
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpHHS3_MIDI, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  VectorCustomDialogs::AppendStatusText(Translate("   Cleanup..."));
  l_fltOverAspiration = t_fltVolumeTracking + t_fltBWB_Volume;
  l_fltOverAspiration = l_fltOverAspiration + 10;
  NGSSTARPROCESSES::Process_SimpleCleanUp(ML_STAR, t_seqBWB, t_seqHHS3_MIDI, t_seqMIDI_OnMagnet, t_seqMIDI_Pipette, t_seqFragmentationMM, t_trpMIDI_Pipette, t_fltBWB_Volume, l_fltOverAspiration, 0, 0, t_fltFragmentationMM_Volume, Translate("RNAMessenger_SVF_BWB_DispenseJet_Empty"), Translate("RNAMessenger_SVF_Water_JetEmpty"), Translate(""), Translate("RNAMessenger_50F_FragmentationMM_JetEmpty"), 1800, 1200, 70, 110, t_intNumberOfColumnsInBatchProcessing, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::TRUE, 0, 120, 0, 120, 0, t_intNumberOfSamplesFromFile, t_blnMPHused);
  t_fltVolumeTracking = t_fltFragmentationMM_Volume;
  VectorCustomDialogs::AppendStatusText(Translate("   Transfer MIDI product to HSP..."));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_WasteCORE, 0, ASWGLOBAL::BOOL::FALSE, t_strCurrentPlateBarcode, 4);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpStack4, t_trpHSP_Pipette2, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  SeqIncrement(t_trpStack4, 1);
  l_fltOverAspiration = t_fltVolumeTracking + 10;
  if (t_blnMPHused == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_Pipette, t_seqHSP_Pipette2, l_fltOverAspiration, Translate("RNAMessenger_50F_ElutedBeads_JetEmpty"), 0, 0, 0, 0.5, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_MPH);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_Pipette_MPH, t_seqHSP_Pipette2_MPH, l_fltOverAspiration, Translate("RNAMessenger_50F_ElutedBeads_JetEmpty"), l_intSeqSize, 0, 0.0, 0.0, 0.5, 1.0);
    }
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_Channels);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_Pipette_Channels, t_seqHSP_Pipette2_Channels, l_fltOverAspiration, Translate("RNAMessenger_50F_ElutedBeads_JetEmpty"), 0, 0, 0, 0.5, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    }
  }
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette, t_trpMIDI_WasteCORE, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("   Transport HSP to ODTC and run thermocycling program..."));
    l_intCurrentPosition = t_trpHamiltonComfortLidStackParkPos.GetCurrentPosition();
    if (l_intCurrentPosition == 0)
    {
      _ReloadComfortLids();
    }
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intMethodTimeODTC, t_intRequestIDODTC);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, t_strCurrentPlateBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath, t_arrODTCMethodNames.ElementAt( 4 -1), t_intMethodTimeODTC, t_intRequestIDODTC, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intMethodTimeODTC, t_intRequestIDODTC);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, t_strCurrentPlateBarcode);
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_OnMagnet, 0, ASWGLOBAL::BOOL::FALSE, t_strCurrentPlateBarcode, 4);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath, t_arrODTCMethodNames.ElementAt( 1 -1), t_intMethodTimeODTC, t_intRequestIDODTC, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    MECC::TraceComment(Translate("************* Unload HSP.............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Unload HSP..."));
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    l_intValueDialog = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
    if (l_intValueDialog == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    MECC::TraceComment(Translate("************* Load HSP.............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Load HSP..."));
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_OnMagnet, 0, ASWGLOBAL::BOOL::FALSE, t_strCurrentPlateBarcode, 4);
  }
  VectorCustomDialogs::AppendStatusText(Translate("   Transfer HSP supernatant to new HSP..."));
  NGSSTARPROCESSES::DATA_IncubationTimer(l_hdlMagnetIncubation, 120, 2);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpStack4, t_trpHSP_Pipette2, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  SeqIncrement(t_trpStack4, 1);
  NGSSTARPROCESSES::DATA_IncubationTimer(l_hdlMagnetIncubation, 120, 3);
  if (t_blnMPHused == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_OnMagnet, t_seqHSP_Pipette2, t_fltSupernatant_M1_Volume, Translate("RNAMessenger_50F_ElutedBeads_JetEmpty"), 0, 0, 0, 0.5, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_MPH);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqHSP_OnMagnet_MPH, t_seqHSP_Pipette2_MPH, t_fltSupernatant_M1_Volume, Translate("RNAMessenger_50F_ElutedBeads_JetEmpty"), l_intSeqSize, 0, 0.0, 0.0, 0.5, 1.0);
    }
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_Channels);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_OnMagnet_Channels, t_seqHSP_Pipette2_Channels, t_fltSupernatant_M1_Volume, Translate("RNAMessenger_50F_ElutedBeads_JetEmpty"), 0, 0, 0, 0.5, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    }
  }
  t_fltVolumeTracking = t_fltSupernatant_M1_Volume;
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_OnMagnet, t_trpHSP_WasteCORE, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("SUBMETHOD COMPLETE:  Purify And Fragment Messenger RNA"), ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD COMPLETE:  Purify And Fragment Messenger RNA********************\n*************************************************************************************************************************"));
}

private function M04_Adenylate3PrimeEnds(  ) void {
  private dialog customDialog_7;
  private variable l_intValueDialog;
  private variable l_fltDispenseMixVolume;
  private variable l_intCurrentPosition;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  Adenylate 3' Ends********************\n*************************************************************************************************************************"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("SUBMETHOD START:  Adenylate 3' Ends"), ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM4, t_intRequiredNumberOf300uLTipsM4, t_intRequiredNumberOf1000uLTipsM4, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeTracking = t_fltSupernatant_M3_Volume;
  MECC::TraceComment(Translate("************* Now transferring ATL4 .............."));
  VectorCustomDialogs::AppendStatusText(Translate("   Transferring ATL4 to HSP..."));
  l_fltDispenseMixVolume = t_fltVolumeTracking + t_fltATL4_Volume;
  l_fltDispenseMixVolume = l_fltDispenseMixVolume * 0.7;
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqATL4, t_seqHSP_Pipette2, t_fltATL4_Volume, Translate("RNAMessenger_50F_ATL4_SurfaceEmpty"), 10, 0, l_fltDispenseMixVolume, 0, 3.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltATL4_Volume;
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("   Transport HSP to ODTC and run thermocycling program..."));
    l_intCurrentPosition = t_trpHamiltonComfortLidStackParkPos.GetCurrentPosition();
    if (l_intCurrentPosition == 0)
    {
      _ReloadComfortLids();
    }
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intMethodTimeODTC, t_intRequestIDODTC);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, t_strCurrentPlateBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath, t_arrODTCMethodNames.ElementAt( 7 -1), t_intMethodTimeODTC, t_intRequestIDODTC, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intMethodTimeODTC, t_intRequestIDODTC);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, t_strCurrentPlateBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath, t_arrODTCMethodNames.ElementAt( 1 -1), t_intMethodTimeODTC, t_intRequestIDODTC, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    MECC::TraceComment(Translate("************* Unload HSP.............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Unload HSP..."));
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    customDialog_7.InitCustomDialog("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");
    customDialog_7.ShowCustomDialog();
    l_intValueDialog = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
    if (l_intValueDialog == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    MECC::TraceComment(Translate("************* Load HSP.............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Load HSP..."));
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("SUBMETHOD COMPLETE:  Adenylate 3' Ends"), ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD COMPLETE:  Adenylate 3' Ends********************\n*************************************************************************************************************************"));
}

private function M05_LigateAnchors(  ) void {
  private dialog customDialog_8;
  private variable l_intValueDialog;
  private variable l_fltDispenseMixVolume;
  private variable l_intCurrentPosition;
  private variable l_intSeqSize;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  Ligate Anchors********************\n*************************************************************************************************************************"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("SUBMETHOD START:  Ligate Anchors"), ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM5, t_intRequiredNumberOf300uLTipsM5, t_intRequiredNumberOf1000uLTipsM5, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeTracking = t_fltSupernatant_M3_Volume + t_fltATL4_Volume;
  if (t_fltInputSampleMass <= 100.0)
  {
    MECC::TraceComment(Translate("************* Now transferring RSB .............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Transferring RSB to HSP..."));
    l_fltDispenseMixVolume = t_fltVolumeTracking + t_fltRSB_M5_Volume;
    l_fltDispenseMixVolume = l_fltDispenseMixVolume * 0.7;
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqRSB_ATL, t_seqHSP_Pipette2, t_fltRSB_M5_Volume, Translate("RNAMessenger_50F_RSB_SurfaceEmpty"), 1, 0, l_fltDispenseMixVolume, 0, 4.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    t_fltVolumeTracking = t_fltVolumeTracking + t_fltRSB_M5_Volume;
  }
  MECC::TraceComment(Translate("************* Now transferring RNA Index Anchors .............."));
  VectorCustomDialogs::AppendStatusText(Translate("   Transferring RNA Index Anchors to HSP..."));
  l_fltDispenseMixVolume = t_fltVolumeTracking + t_fltRNAIndexAnchors_Volume;
  l_fltDispenseMixVolume = l_fltDispenseMixVolume * 0.7;
  if (t_blnMPHused == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqIndexPlate, t_seqHSP_Pipette2, t_fltRNAIndexAnchors_Volume, Translate("RNAMessenger_50F_RNAIndexAnchors_SurfaceEmpty"), 1, 0, l_fltDispenseMixVolume, 0.5, 4.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    l_intSeqSize = SeqGetTotal(t_seqIndexPlate_MPH);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqIndexPlate_MPH, t_seqHSP_Pipette2_MPH, t_fltRNAIndexAnchors_Volume, Translate("RNAMessenger_50F_RNAIndexAnchors_SurfaceEmpty"), l_intSeqSize, 1, 0, l_fltDispenseMixVolume, 0.5, 4.0);
    }
    l_intSeqSize = SeqGetTotal(t_seqIndexPlate_Channels);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqIndexPlate_Channels, t_seqHSP_Pipette2_Channels, t_fltRNAIndexAnchors_Volume, Translate("RNAMessenger_50F_RNAIndexAnchors_SurfaceEmpty"), 1, 0, l_fltDispenseMixVolume, 0.5, 4.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    }
  }
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltRNAIndexAnchors_Volume;
  MECC::TraceComment(Translate("************* Now transferring LIGX .............."));
  VectorCustomDialogs::AppendStatusText(Translate("   Transferring LIGX to HSP..."));
  l_fltDispenseMixVolume = t_fltVolumeTracking + t_fltLIGX_Volume;
  l_fltDispenseMixVolume = l_fltDispenseMixVolume * 0.7;
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqLIGX, t_seqHSP_Pipette2, t_fltLIGX_Volume, Translate("RNAMessenger_50F_LIGX_SurfaceEmpty"), 10, 0, l_fltDispenseMixVolume, 0, 4.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltLIGX_Volume;
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("   Transport HSP to ODTC and run thermocycling program..."));
    l_intCurrentPosition = t_trpHamiltonComfortLidStackParkPos.GetCurrentPosition();
    if (l_intCurrentPosition == 0)
    {
      _ReloadComfortLids();
    }
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intMethodTimeODTC, t_intRequestIDODTC);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, t_strCurrentPlateBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath, t_arrODTCMethodNames.ElementAt( 8 -1), t_intMethodTimeODTC, t_intRequestIDODTC, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intMethodTimeODTC, t_intRequestIDODTC);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, t_strCurrentPlateBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath, t_arrODTCMethodNames.ElementAt( 1 -1), t_intMethodTimeODTC, t_intRequestIDODTC, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    MECC::TraceComment(Translate("************* Unload HSP.............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Unload HSP..."));
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    customDialog_8.InitCustomDialog("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");
    customDialog_8.ShowCustomDialog();
    l_intValueDialog = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
    if (l_intValueDialog == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    MECC::TraceComment(Translate("************* Load HSP.............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Load HSP..."));
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  MECC::TraceComment(Translate("************* Now transferring STL .............."));
  VectorCustomDialogs::AppendStatusText(Translate("   Transferring STL to HSP..."));
  l_fltDispenseMixVolume = t_fltVolumeTracking + t_fltSTL_Volume;
  l_fltDispenseMixVolume = l_fltDispenseMixVolume * 0.7;
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqSTL, t_seqHSP_Pipette2, t_fltSTL_Volume, Translate("RNAMessenger_50F_STL_SurfaceEmpty"), 15, 0, l_fltDispenseMixVolume, 0, 4.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltSTL_Volume;
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("SUBMETHOD COMPLETE:  Ligate Anchors"), ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD COMPLETE:  Ligate Anchors********************\n*************************************************************************************************************************"));
}

private function M06_CleanUpFragments(  ) void {
  private dialog customDialog_9;
  private variable l_intValueDialog;
  private variable l_fltOverAspiration;
  private variable l_strReturn;
  private variable l_fltVolumeConsumed;
  private variable l_fltMixVolume;
  private variable l_blnReturn;
  private variable l_intSeqSize;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  Clean Up Fragments********************\n*************************************************************************************************************************"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("SUBMETHOD START:  Clean Up Fragments"), ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM6, t_intRequiredNumberOf300uLTipsM6, t_intRequiredNumberOf1000uLTipsM6, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeTracking = t_fltSupernatant_M3_Volume + t_fltATL4_Volume;
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltRSB_M5_Volume;
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltRNAIndexAnchors_Volume;
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltLIGX_Volume;
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltSTL_Volume;
  VectorCustomDialogs::AppendStatusText(Translate("   Transfer HSP product to MIDI for cleanup..."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpStack_MIDI, t_trpMIDI_Pipette, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  SeqIncrement(t_trpStack_MIDI, 1);
  l_fltOverAspiration = t_fltVolumeTracking + 10;
  if (t_blnMPHused == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, l_fltOverAspiration, Translate("RNAMessenger_SVF_Water_JetEmpty"), 0, 0, 0, 0.5, 3.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_MPH);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqHSP_Pipette2_MPH, t_seqMIDI_Pipette_MPH, l_fltOverAspiration, Translate("RNAMessenger_SVF_Water_JetEmpty"), l_intSeqSize, 0, 0.0, 0.0, 0.5, 3.0);
    }
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_Channels);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2_Channels, t_seqMIDI_Pipette_Channels, l_fltOverAspiration, Translate("RNAMessenger_SVF_Water_JetEmpty"), 0, 0, 0, 0.5, 3.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    }
  }
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette, t_trpHHS3_MIDI, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  if (t_blnPreMixByOverturn == ASWGLOBAL::BOOL::TRUE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("   Overturn mix..."));
    l_fltMixVolume = t_fltAMPureXPBeadsVolume / (8 * 1.0);
    l_fltMixVolume = l_fltMixVolume * 0.7;
    if (l_fltMixVolume > 1000)
    {
      l_fltMixVolume = 1000;
    }
    NGSSTARPROCESSES::PIP_MixBeadsByOverturn(ML_STAR, t_seqBeads, Translate("RNAMessenger_HVF_SMBPremix_SurfaceEmpty"), 3, 3, l_fltMixVolume, l_fltMixVolume, 2, 0, 1, l_blnReturn, l_strReturn);
  }
  VectorCustomDialogs::AppendStatusText(Translate("   Cleanup..."));
  l_fltOverAspiration = t_fltVolumeTracking + t_fltAMPureXPBeads_M6_Volume;
  l_fltOverAspiration = l_fltOverAspiration + 10;
  NGSSTARPROCESSES::Process_CleanUp_Combined(ML_STAR, t_seqBeads, t_seqBeads, t_seqHHS3_MIDI, t_seqEtOH, t_seqMIDI_OnMagnet, t_seqRSB_ATL, t_fltEthanol_M6_Volume, t_fltAMPureXPBeads_M6_Volume, t_fltRSB_M6_Volume, l_fltOverAspiration, Translate("RNAMessenger_SVF_AMPureBeads_SurfaceEmpty"), Translate("RNAMessenger_HVF_SMBPremix_SurfaceEmpty"), Translate("RNAMessenger_HVF_EtOH80_JetPart"), Translate("RNAMessenger_50F_RSB_JetEmpty"), Translate("RNAMessenger_SVF_Water_JetEmpty"), Translate("RNAMessenger_SVF_EtOHWaste_JetEmpty"), 1800, 1200, 90, 135, t_intNumberOfColumnsInBatchProcessing, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::TRUE, 300, 300, 120, 120, 120, t_blnMPHused);
  t_fltVolumeTracking = t_fltRSB_M6_Volume;
  l_fltVolumeConsumed = t_fltAMPureXPBeads_M6_Volume * t_intNumberOfSamplesFromFile;
  t_fltAMPureXPBeadsVolume = t_fltAMPureXPBeadsVolume - l_fltVolumeConsumed;
  VectorCustomDialogs::AppendStatusText(Translate("   Transfer MIDI product to HSP..."));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_WasteCORE, 0, ASWGLOBAL::BOOL::FALSE, t_strCurrentPlateBarcode, 4);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpStack4, t_trpHSP_Pipette2, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  SeqIncrement(t_trpStack4, 1);
  if (t_blnMPHused == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltSupernatant_M6_Volume, Translate("RNAMessenger_50F_CleanSample_JetEmpty"), 0, 0, 0, 0.5, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_MPH);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet_MPH, t_seqHSP_Pipette2_MPH, t_fltSupernatant_M6_Volume, Translate("RNAMessenger_50F_CleanSample_JetEmpty"), l_intSeqSize, 0, 0.0, 0.0, 0.5, 1.0);
    }
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_Channels);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet_Channels, t_seqHSP_Pipette2_Channels, t_fltSupernatant_M6_Volume, Translate("RNAMessenger_50F_CleanSample_JetEmpty"), 0, 0, 0, 0.5, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    }
  }
  t_fltVolumeTracking = t_fltSupernatant_M6_Volume;
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_WasteCORE, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  if (t_arrBlnProcessActivation.ElementAt( 7 -1) == ASWGLOBAL::BOOL::FALSE)
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("Clean Up Fragments"), Translate("User stopped run after described process. Clean the deck and empty the liquid waste."));
    }
    customDialog_9.InitCustomDialog("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");
    customDialog_9.ShowCustomDialog();
    l_intValueDialog = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("SUBMETHOD COMPLETE:  Clean Up Fragments"), ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD COMPLETE:  Clean Up Fragments********************\n*************************************************************************************************************************"));
}

private function M07_AmplifyLibrary(  ) void {
  private variable l_intValueDialog;
  private variable l_fltDispenseMixVolume;
  private variable l_intODTCIndex;
  private dialog customDialog_10;
  private dialog customDialog_11;
  private dialog customDialog_12;
  private variable l_intCurrentPosition;
  private variable l_intSeqSize;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  Amplify Library********************\n*************************************************************************************************************************"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("SUBMETHOD START:  Amplify Library"), ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM7, t_intRequiredNumberOf300uLTipsM7, t_intRequiredNumberOf1000uLTipsM7, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeTracking = t_fltSupernatant_M6_Volume;
  if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    MECC::TraceComment(Translate("************* Unload HSP.............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Unload HSP..."));
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    customDialog_10.InitCustomDialog("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");
    customDialog_10.ShowCustomDialog();
    l_intValueDialog = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
    if (l_intValueDialog == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    MECC::TraceComment(Translate("************* Load HSP.............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Load HSP..."));
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  MECC::TraceComment(Translate("************* Now transferring Index Adapters .............."));
  VectorCustomDialogs::AppendStatusText(Translate("   Transferring Index Adapters to HSP..."));
  l_fltDispenseMixVolume = t_fltVolumeTracking + t_fltIndexAdapter_Volume;
  l_fltDispenseMixVolume = l_fltDispenseMixVolume * 0.7;
  if (t_blnMPHused == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqIndexPlate, t_seqHSP_Pipette2, t_fltIndexAdapter_Volume, Translate("RNAMessenger_50F_Adapters_SurfaceEmpty"), 1, 0, l_fltDispenseMixVolume, 0.5, 3.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    l_intSeqSize = SeqGetTotal(t_seqIndexPlate_MPH);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqIndexPlate_MPH, t_seqHSP_Pipette2_MPH, t_fltIndexAdapter_Volume, Translate("RNAMessenger_50F_Adapters_SurfaceEmpty"), l_intSeqSize, 1, 0, l_fltDispenseMixVolume, 0.5, 3.0);
    }
    l_intSeqSize = SeqGetTotal(t_seqIndexPlate_Channels);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqIndexPlate_Channels, t_seqHSP_Pipette2_Channels, t_fltIndexAdapter_Volume, Translate("RNAMessenger_50F_Adapters_SurfaceEmpty"), 1, 0, l_fltDispenseMixVolume, 0.5, 3.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    }
  }
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltIndexAdapter_Volume;
  MECC::TraceComment(Translate("************* Now transferring EPM .............."));
  VectorCustomDialogs::AppendStatusText(Translate("   Transferring EPM to HSP..."));
  l_fltDispenseMixVolume = t_fltVolumeTracking + t_fltEPM_Volume;
  l_fltDispenseMixVolume = l_fltDispenseMixVolume * 0.7;
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqEPM, t_seqHSP_Pipette2, t_fltEPM_Volume, Translate("RNAMessenger_50F_EPM_SurfaceEmpty"), 10, 0, l_fltDispenseMixVolume, 0, 4.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltEPM_Volume;
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("   Transport HSP to ODTC and run thermocycling program..."));
    l_intCurrentPosition = t_trpHamiltonComfortLidStackParkPos.GetCurrentPosition();
    if (l_intCurrentPosition == 0)
    {
      _ReloadComfortLids();
    }
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intMethodTimeODTC, t_intRequestIDODTC);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, t_strCurrentPlateBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_blnSampleInputMassOf25ng == ASWGLOBAL::BOOL::TRUE)
    {
      l_intODTCIndex = 9;
    }
    else
    {
      if (t_blnSampleInputMassOf100ng == ASWGLOBAL::BOOL::TRUE)
      {
        l_intODTCIndex = 10;
      }
      else
      {
        if (t_blnSampleInputMassOf1000ng == ASWGLOBAL::BOOL::TRUE)
        {
          l_intODTCIndex = 11;
        }
      }
    }
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath, t_arrODTCMethodNames.ElementAt( l_intODTCIndex -1), t_intMethodTimeODTC, t_intRequestIDODTC, ASWGLOBAL::BOOL::TRUE);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intMethodTimeODTC, t_intRequestIDODTC);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, t_strCurrentPlateBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCProtocolPath, t_arrODTCMethodNames.ElementAt( 1 -1), t_intMethodTimeODTC, t_intRequestIDODTC, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    MECC::TraceComment(Translate("************* Unload HSP.............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Unload HSP..."));
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    if (t_arrBlnProcessActivation.ElementAt( 8 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      customDialog_12.InitCustomDialog("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");
      customDialog_12.ShowCustomDialog();
      l_intValueDialog = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
      if (l_intValueDialog == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
      }
      MECC::TraceComment(Translate("************* Load HSP.............."));
      VectorCustomDialogs::AppendStatusText(Translate("   Load HSP..."));
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    else
    {
      customDialog_11.InitCustomDialog("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");
      customDialog_11.ShowCustomDialog();
      l_intValueDialog = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
      if (l_intValueDialog == ASWGLOBAL::DIALOG::CANCEL)
      {
        abort;
      }
      MECC::TraceComment(Translate("************* Load HSP.............."));
      VectorCustomDialogs::AppendStatusText(Translate("   Load HSP..."));
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("SUBMETHOD COMPLETE:  Amplify Library"), ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD COMPLETE:  Amplify Library********************\n*************************************************************************************************************************"));
}

private function M08_CleanUpLibrary(  ) void {
  private variable l_fltOverAspiration;
  private variable l_strReturn;
  private variable l_fltVolumeConsumed;
  private variable l_fltMixVolume;
  private variable l_blnReturn;
  private variable l_intValueDialog;
  private dialog customDialog_13;
  private variable l_intSeqSize;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  Clean Up Library********************\n*************************************************************************************************************************"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("SUBMETHOD START:  Clean Up Library"), ASWGLOBAL::BOOL::TRUE);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM8, t_intRequiredNumberOf300uLTipsM8, t_intRequiredNumberOf1000uLTipsM8, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  t_fltVolumeTracking = t_fltSupernatant_M6_Volume;
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltIndexAdapter_Volume;
  t_fltVolumeTracking = t_fltVolumeTracking + t_fltEPM_Volume;
  VectorCustomDialogs::AppendStatusText(Translate("   Transfer HSP product to MIDI for cleanup..."));
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpStack_MIDI, t_trpMIDI_Pipette, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  SeqIncrement(t_trpStack_MIDI, 1);
  l_fltOverAspiration = t_fltVolumeTracking + 10;
  if (t_blnMPHused == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2, t_seqMIDI_Pipette, l_fltOverAspiration, Translate("RNAMessenger_SVF_Water_JetEmpty"), 0, 0, 0, 0.5, 3.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_MPH);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqHSP_Pipette2_MPH, t_seqMIDI_Pipette_MPH, l_fltOverAspiration, Translate("RNAMessenger_SVF_Water_JetEmpty"), l_intSeqSize, 0, 0.0, 0.0, 0.5, 3.0);
    }
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_Channels);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2_Channels, t_seqMIDI_Pipette_Channels, l_fltOverAspiration, Translate("RNAMessenger_SVF_Water_JetEmpty"), 0, 0, 0, 0.5, 3.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    }
  }
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_Pipette, t_trpHHS3_MIDI, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  if (t_blnPreMixByOverturn == ASWGLOBAL::BOOL::TRUE)
  {
    VectorCustomDialogs::AppendStatusText(Translate("   Overturn mix..."));
    l_fltMixVolume = t_fltAMPureXPBeadsVolume / (8 * 1.0);
    l_fltMixVolume = l_fltMixVolume * 0.7;
    if (l_fltMixVolume > 1000)
    {
      l_fltMixVolume = 1000;
    }
    NGSSTARPROCESSES::PIP_MixBeadsByOverturn(ML_STAR, t_seqBeads, Translate("RNAMessenger_HVF_SMBPremix_SurfaceEmpty"), 3, 3, l_fltMixVolume, l_fltMixVolume, 2, 0, 1, l_blnReturn, l_strReturn);
  }
  VectorCustomDialogs::AppendStatusText(Translate("   Cleanup..."));
  l_fltOverAspiration = t_fltVolumeTracking + t_fltAMPureXPBeads_M8_Volume;
  l_fltOverAspiration = l_fltOverAspiration + 10;
  NGSSTARPROCESSES::Process_CleanUp_Combined(ML_STAR, t_seqBeads, t_seqBeads, t_seqHHS3_MIDI, t_seqEtOH, t_seqMIDI_OnMagnet, t_seqRSB_ATL, t_fltEthanol_M8_Volume, t_fltAMPureXPBeads_M8_Volume, t_fltRSB_M8_Volume, l_fltOverAspiration, Translate("RNAMessenger_SVF_AMPureBeads_SurfaceEmpty"), Translate("RNAMessenger_HVF_SMBPremix_SurfaceEmpty"), Translate("RNAMessenger_HVF_EtOH80_JetPart"), Translate("RNAMessenger_50F_RSB_JetEmpty"), Translate("RNAMessenger_SVF_Water_JetEmpty"), Translate("RNAMessenger_SVF_EtOHWaste_JetEmpty"), 1800, 1200, 90, 135, t_intNumberOfColumnsInBatchProcessing, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::TRUE, 300, 300, 120, 120, 120, t_blnMPHused);
  t_fltVolumeTracking = t_fltRSB_M8_Volume;
  l_fltVolumeConsumed = t_fltAMPureXPBeads_M8_Volume * t_intNumberOfSamplesFromFile;
  t_fltAMPureXPBeadsVolume = t_fltAMPureXPBeadsVolume - l_fltVolumeConsumed;
  VectorCustomDialogs::AppendStatusText(Translate("   Transfer MIDI product to HSP..."));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_WasteCORE, 0, ASWGLOBAL::BOOL::FALSE, t_strCurrentPlateBarcode, 4);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpStack4, t_trpHSP_Pipette2, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  SeqIncrement(t_trpStack4, 1);
  if (t_blnMPHused == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltSupernatant_M8_Volume, Translate("RNAMessenger_50F_CleanSample_JetEmpty"), 0, 0, 0, 0.5, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
  }
  else
  {
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_MPH);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet_MPH, t_seqHSP_Pipette2_MPH, t_fltSupernatant_M8_Volume, Translate("RNAMessenger_50F_CleanSample_JetEmpty"), l_intSeqSize, 0, 0.0, 0.0, 0.5, 1.0);
    }
    l_intSeqSize = SeqGetTotal(t_seqHSP_Pipette2_Channels);
    if (l_intSeqSize > 0)
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet_Channels, t_seqHSP_Pipette2_Channels, t_fltSupernatant_M8_Volume, Translate("RNAMessenger_50F_CleanSample_JetEmpty"), 0, 0, 0, 0.5, 1.0, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE);
    }
  }
  t_fltVolumeTracking = t_fltSupernatant_M8_Volume;
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_WasteCORE, 0, ASWGLOBAL::BOOL::TRUE, t_strCurrentPlateBarcode, 4);
  if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_SendEmail(Translate("Clean Up Fragments"), Translate("User stopped run after described process. Clean the deck and empty the liquid waste."));
  }
  customDialog_13.InitCustomDialog("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");
  customDialog_13.ShowCustomDialog();
  l_intValueDialog = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("SUBMETHOD COMPLETE:  Clean Up Library"), ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD COMPLETE:  Clean Up Library********************\n*************************************************************************************************************************"));
}

private function _ReloadComfortLids(  ) void {
  private variable l_strLoadingDialogBottomText;
  private variable l_strLoadingDialogTopText;
  private variable l_strLoadingDialogTopImageFilePath;
  private variable l_intReturnValueLoadingDialog;
  private variable l_strNumberOfHamiltonComfortLids;
  private variable l_arrLoadingDialogQuantities[];
  private variable l_arrLoadingDialogDescriptions[];
  private variable l_arrLoadingDialogPositions[];
  private variable l_arrStrLoadingDialogColumnHeaders[];
  l_strNumberOfHamiltonComfortLids = Translate("");
  Trace ("------- t_intNumberOfHamiltonComfortLidsReload: ", t_intNumberOfHamiltonComfortLidsReload);
  //Hamilton Comfort Lid Loading Dialog information
  l_strNumberOfHamiltonComfortLids = StrIStr(t_intNumberOfHamiltonComfortLidsReload);
  l_strLoadingDialogTopText = "Please load the Hamilton Comfort Lids at ODTC Carrier :";
  l_strLoadingDialogBottomText = "If number of lids is greater than 1 - stack lids";
  if(t_intNGSPlatform == 1)
     l_strLoadingDialogTopImageFilePath = "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarLoading\\NGSStarChannelPictures\\ODTCHamiltonComforlidPosition.jpg";
  else if(t_intNGSPlatform ==2)
     l_strLoadingDialogTopImageFilePath = "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarLoading\\NGSStarMPHPictures\\ODTCHamiltonComforlidPosition.jpg";
  else if(t_intNGSPlatform ==3)
     l_strLoadingDialogTopImageFilePath = "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Illumina\\Stranded mRNA Prep and Ligation\\Library\\NGSStarLoading\\ClinicalNGSStarletPictures\\ODTCHamiltonComforlidPosition.jpg";
  l_arrLoadingDialogPositions.AddAsLast(Translate("Racks - M8-M1"));
  l_arrLoadingDialogQuantities.AddAsLast(l_strNumberOfHamiltonComfortLids);
  l_arrLoadingDialogDescriptions.AddAsLast(Translate("Hamilton Comfort Lids"));
  VectorCustomDialogs::LoginDialogSetResources(l_arrStrLoadingDialogColumnHeaders);
  VectorCustomDialogs::LoadingDialog(Translate("Load the following Carrier"), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, l_strLoadingDialogTopText, l_strLoadingDialogBottomText, l_strLoadingDialogTopImageFilePath, Translate(""), 800, l_arrLoadingDialogPositions, l_arrLoadingDialogQuantities, l_arrLoadingDialogDescriptions);
  if (l_intReturnValueLoadingDialog == 2)
  {
    abort;
  }
  else
  {
    l_arrLoadingDialogPositions.SetSize(0);
    l_arrLoadingDialogQuantities.SetSize(0);
    l_arrLoadingDialogDescriptions.SetSize(0);
  }
  STACKREDUCER::StackReducer(t_intNumberOfHamiltonComfortLidsReload, ML_STAR.Ham_ComfortLid_Stack_ParkPos, t_trpHamiltonComfortLidStackParkPos, ARW_Global::StackDefinition::NumberOfUnitsStack_Comfortlid, ML_STAR);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, t_trpHamiltonComfortLidStackParkPos);
}

private function _SplitSequence( sequence & i_seq, sequence & o_seqMPH, sequence & o_seqChannels ) void {
  private variable l_strPositionID;
  private variable l_varReturn;
  private variable l_strAlpha;
  private variable l_intNumericStorage;
  private variable l_intDeviceRowCount;
  private variable i;
  private variable k;
  private variable m;
  private variable n;
  private variable l_intNumericExpectation;
  private variable l_intNumeric;
  private variable l_strNumeric;
  private variable l_intSize;
  private variable l_strLabwareID;
  private sequence l_seq;
  private sequence l_seqBucket;
  private variable l_arrMissingValues[];
  private variable l_arrLabwareID[];
  private variable l_arrMPHPositionID[];
  private variable l_arrAlpha[];
  private variable l_arrNumericCompare[];
  private variable l_arrBucket[];
  private variable l_arrNumeric[];
  private variable l_arrNotExpectedValues[];
  private variable l_arrChannelsPositionID[];
  {variable str;str = GetFunctionName();Trace("*************************************************************************************************************************");Trace("******************** SUBMETHOD START:  ",StrRight(str,StrGetLength(str) - StrReverseFind(str,"_") - 1),"********************");Trace("*************************************************************************************************************************");}
  l_arrAlpha.SetSize(0);
  l_arrAlpha.AddAsLast(Translate("A"));
  l_arrAlpha.AddAsLast(Translate("B"));
  l_arrAlpha.AddAsLast(Translate("C"));
  l_arrAlpha.AddAsLast(Translate("D"));
  l_arrAlpha.AddAsLast(Translate("E"));
  l_arrAlpha.AddAsLast(Translate("F"));
  l_arrAlpha.AddAsLast(Translate("G"));
  l_arrAlpha.AddAsLast(Translate("H"));
  l_intDeviceRowCount=l_arrAlpha.GetSize();
  l_arrChannelsPositionID.SetSize(0);
  l_arrMPHPositionID.SetSize(0);
  l_intNumericStorage = 0;
  l_strLabwareID = SeqGetLabwareId(i_seq);
  SeqCopySequence(l_seq, i_seq);
  HSLLabwrAccess::SortSequenceByColumn2(ML_STAR, HSLLabwrAccess::Enum::Sorting::ByXAscending, HSLLabwrAccess::Enum::Sorting::ByYDescending, l_seq, l_seqBucket);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, l_seq);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, l_seqBucket);
  l_varReturn = SeqEqualSequences(i_seq, l_seqBucket);
  if (l_varReturn == 0)
  {
    SeqCopySequence(o_seqChannels, i_seq);
    SeqRemoveAll(o_seqMPH);
    TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate("Input and sorted sequences are mismatched.  Returning input sequence as Channels sequence."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    return;
  }
  {
    i = 0;
    while (
       (l_seq.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, l_seq, 1);
      i = i + 1;
      l_arrBucket.SetSize(0);
      l_arrNumeric.SetSize(0);
      l_arrNumericCompare.SetSize(0);
      {
        for(k = 0; k < l_intDeviceRowCount;)
        {
          k = k + 1;
          l_strPositionID = SeqGetPositionId(l_seq);
          SeqIncrement(l_seq, 1);
          l_strAlpha = StrLeft(l_strPositionID, 1);
          l_strNumeric = l_strPositionID;
          StrTrimLeft(l_strNumeric, l_strAlpha);
          if (k == 1)
          {
            {
              for(m = 0; m < l_intDeviceRowCount;)
              {
                m = m + 1;
                l_arrNumericCompare.AddAsLast(l_strNumeric);
              }
            }
            l_intNumeric = StrIVal(l_strNumeric);
            l_intNumericExpectation = l_intNumericStorage + 1;
            TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, Translate("Numeric ID: "), l_intNumeric, Translate(", Numeric Storage ID: "), l_intNumericStorage, Translate(", Numeric Expectation ID: "), l_intNumericExpectation, Translate(""), Translate(""), Translate(""), Translate(""));
          }
          if (l_strAlpha == l_arrAlpha.ElementAt( k -1))
          {
            if (l_intNumericStorage != -1)
            {
              if (l_intNumericStorage == 0)
              {
                l_arrBucket.AddAsLast(l_strPositionID);
                l_arrNumeric.AddAsLast(l_strNumeric);
              }
              else
              {
                if (l_intNumeric == l_intNumericExpectation)
                {
                  l_arrBucket.AddAsLast(l_strPositionID);
                  l_arrNumeric.AddAsLast(l_strNumeric);
                }
                else
                {
                  l_arrChannelsPositionID = HSLExtensions::Array::Concat(l_arrChannelsPositionID, l_arrBucket);
                  l_arrChannelsPositionID.AddAsLast(l_strPositionID);
                  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Channels Position ID"), l_arrChannelsPositionID);
                  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("MPH Position ID"), l_arrMPHPositionID);
                  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Numeric ID"), l_arrNumeric);
                  break;
                }
              }
              TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Bucket Position ID"), l_arrBucket);
              TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Numeric ID"), l_arrNumeric);
            }
          }
          else
          {
            l_arrChannelsPositionID = HSLExtensions::Array::Concat(l_arrChannelsPositionID, l_arrBucket);
            if (l_strPositionID == "")
            {
              TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Channels Position ID"), l_arrChannelsPositionID);
              TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("MPH Position ID"), l_arrMPHPositionID);
              break;
            }
            else
            {
              l_arrChannelsPositionID.AddAsLast(l_strPositionID);
            }
            TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Channels Position ID"), l_arrChannelsPositionID);
            TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("MPH Position ID"), l_arrMPHPositionID);
            break;
          }
          if (k == l_intDeviceRowCount)
          {
            l_varReturn = HSLExtensions::Array::CompareArrays(l_arrNumericCompare, l_arrNumeric, l_arrMissingValues, l_arrNotExpectedValues);
            if (l_varReturn == 1)
            {
              l_arrMPHPositionID = HSLExtensions::Array::Concat(l_arrMPHPositionID, l_arrBucket);
              l_intNumericStorage = l_intNumeric;
            }
            else
            {
              l_arrChannelsPositionID = HSLExtensions::Array::Concat(l_arrChannelsPositionID, l_arrBucket);
              l_intNumericStorage = -1;
            }
            TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Channels Position ID"), l_arrChannelsPositionID);
            TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("MPH Position ID"), l_arrMPHPositionID);
            TRACELEVEL::Trace_10(TRACE_LEVEL_DEBUG, Translate("Numeric ID: "), l_intNumeric, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          }
        }
      }
      if (
         (l_seq.GetCurrentPosition() > 0 && l_seq.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    l_seq.SetMax(l_seq.GetTotal());
    l_seq.SetCurrentPosition(1);
  }
  l_arrLabwareID.SetSize(0);
  l_intSize=l_arrChannelsPositionID.GetSize();
  {
    for(n = 0; n < l_intSize;)
    {
      n = n + 1;
      l_arrLabwareID.AddAsLast(l_strLabwareID);
    }
  }
  o_seqChannels = HSLExtensions::Sequence::CreateByLabwareData(l_arrLabwareID, l_arrChannelsPositionID);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seqChannels);
  l_arrLabwareID.SetSize(0);
  l_intSize=l_arrMPHPositionID.GetSize();
  {
    for(n = 0; n < l_intSize;)
    {
      n = n + 1;
      l_arrLabwareID.AddAsLast(l_strLabwareID);
    }
  }
  o_seqMPH = HSLExtensions::Sequence::CreateByLabwareData(l_arrLabwareID, l_arrMPHPositionID);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_RELEASE, o_seqMPH);
  {variable str;str = GetFunctionName();Trace("*************************************************************************************************************************");Trace("******************** SUBMETHOD COMPLETE:  ",StrRight(str,StrGetLength(str) - StrReverseFind(str,"_") - 1),"********************");Trace("*************************************************************************************************************************");}
}
