 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Roche\\KAPA HyperPlus Library Prep\\Library\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Roche\\KAPA HyperPlus Library Prep\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Roche\\KAPA HyperPlus Library Prep\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Roche\\KAPA HyperPlus Library Prep\\Library\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "HSLAppsLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Roche\\KAPA HyperPlus Library Prep\\Library\\InitWorkListLocation.hsl" }
 namespace _Method { #include "VectorCustomDialogs\\VectorCustomDialogs.hsl" }
 namespace _Method { #include "AssignColorScheme\\ColorSchemeLibrary.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Roche\\KAPA HyperPlus Library Prep\\Library\\NGSStarLoading\\NGSStarLoading.hs_" }
 namespace _Method { #include "Stack_Reducer\\StackReducer.hs_" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Roche\\KAPA HyperPlus Library Prep\\Library\\NGSStarLoading\\NGSStarLoading.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Roche\\KAPA HyperPlus Library Prep\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Roche\\KAPA HyperPlus Library Prep\\Library\\NGSStarLoading\\NGSStarLoading.hs_" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Roche\\KAPA HyperPlus Library Prep\\Library\\Tools\\Tools_Library.hs_" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Roche\\KAPA HyperPlus Library Prep\\Library\\NGSStarLoading\\ARW_Global.hsl" }
#include "C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Roche\\KAPA HyperPlus Library Prep\\Methods\\NGS STAR MOA Roche KAPA Hyper Library Prep v0.1.5.res"
sequence t_seqMlStarSequenceNotUsed;
sequence t_seqMIDI_OnMagnet;
sequence t_seqHSP_Pipette;
sequence t_trpHSP_ODTC;
sequence t_trpHamiltonComfortLidODTC;
sequence t_trp_Stack1;
sequence t_trpHamiltonComfortLidStackParkPos;
sequence t_trp_Stack4;
sequence t_trpHSP_Pipette2;
sequence t_trpMIDI_Pipette;
sequence t_trpMIDI_OnMagnet;
sequence t_trpHSP_Waste;
sequence t_trpMIDI_Waste;
sequence t_seqMIDI_Pipette;
sequence t_seqHSP_Pipette2;
sequence t_trpHamiltonComfortLidWaste;
variable t_intHHS1_HSP1;
variable t_intHHS2_HSP2;
variable t_intHHS3_HSP3_MIDI3;
variable t_intHHS4_MIDI1;
variable t_intHHS5_MIDI2;
variable t_arrIndex1IDs[];
variable t_arrIndex1PositionIDs[];
variable t_arrIndex2IDs[];
variable t_arrIndex2PositionIDs[];
variable t_arrSamplePositionIDs[];
variable t_arrAdapterLigatioPlateLabwareID[];
variable t_arrAdapterLigationPlatePositionIDs[];
variable t_blnODTCused;
variable t_blnSendEmails;
variable t_intRequiredNumberOf1000uLTipsM3;
variable t_intRequiredNumberOf1000uLTipsM4;
variable t_intRequiredNumberOf1000uLTipsM5;
variable t_intRequiredNumberOf300uLTipsM3;
variable t_intRequiredNumberOf300uLTipsM4;
variable t_intRequiredNumberOf300uLTipsM5;
variable t_intRequiredNumberOf50uLTipsM3;
variable t_intRequiredNumberOf50uLTipsM4;
variable t_intRequiredNumberOf50uLTipsM5;
variable t_strSerialNumberMLStar;
variable t_intSelectedIndexSTART;
variable t_intSelectedIndexSTOP;
variable t_strLocalIPAddressOfComputer;
variable t_strDeviceAddressODTC;
variable t_intNumberOfSamplesFromFile;
variable t_intDeviceNumberODTC;
variable t_blnTestODTCWithShortDummyProtocol;
variable t_strODTCFolderXML;
variable t_blnShortenPreheat;
sequence t_seqHHS3_MIDI;
sequence t_trpHHS3_MIDI;
variable t_strPCRProgramODTC;
variable t_arrBlnProcessActivation[];
variable t_blnSkipLoadingRoutine;
variable t_intRequestIDForActiveProtocol;
variable t_intTimeForProtocol;
variable l_arrEndDialogListInformation[];
variable t_blnSimulationMode;
variable t_blnUseMPHInsteadOfChannels;
variable t_strFullPathReportFile;
variable t_blnReduceDeckTo4ChannelSystem;
timer FragmentationTimer;
variable t_intFragmentationSeconds;
variable t_intRequiredNumberOf50uLTipsM1;
variable t_intRequiredNumberOf1000uLTipsM1;
variable t_intRequiredNumberOf300uLTipsM1;
variable t_strODTCDirectory;
variable t_str_PlatformUsed;
variable t_strHamiltonDirectory;
variable t_blnActivateLockUnlockOfFrontCover;
variable l_intPlatformUsed;
variable l_int_rtnErrorDialog;
variable t_strTipCounterNameTip300;
variable t_strTipCounterNameTip50;
variable t_strTipCounterNameTip1000;
variable t_intMaxPlatesPerStackHSP;
variable t_intMaxPlatesPerStackMIDI;
variable t_intMaxComfortLidPerStack;
variable t_str_KitTitle;
variable t_str_KitSupplier;
variable t_blnMeasureVolumeWithinTroughs;
variable l_strLastMessage;
sequence l_seqTip50;
sequence l_seqTip1000;
sequence l_seqTip300;
sequence t_seqAspirate_TrisBuffer_distinct;
sequence t_seqAspirate_Ethanol80_distinct;
sequence t_seq_IndexPlate_Pipette;
sequence t_seqAspirate_Ethanol80;
sequence t_seqAspirate_TrisBuffer;
sequence t_seqHSP_OnMagnet;
sequence t_trp_IndexPlate_Pipette;
sequence t_trpHSP_Pipette;
sequence t_trpHSP_OnMagnet;
variable t_strEmailAddress;
sequence t_seqAspirate_AmplificationMastermix;
sequence t_seqAspirate_AmplificationMastermix_distinct;
sequence t_trpCPAC_HSP;
sequence t_seqCPAC_HSP;
variable t_fltVolumeLigationMasterMix_Process03;
variable t_fltVolumeBeads02_Process07;
variable t_fltVolumeTrisBuffer_Process04;
variable t_fltVolumeAmplificationMastermix_Process05;
variable t_fltVolumeTrisBuffer_Process06;
variable t_fltVolumeTrisBuffer_Process07;
variable t_fltVolumeBeads01_Process07;
variable t_fltVolumeDilutedAdapter_Process03;
variable t_fltVolumeEthanol80_Process04;
variable t_fltVolumeEthanol80_Process07;
variable t_fltDiscardSupernatant_Process06;
variable t_fltVolumeBeads_Process04;
variable t_fltVolumeBeads_Process06;
sequence t_seqAspirate_LigationMasterMix_distinct;
sequence t_seqAspirate_EndRepairandATailingMasterMix;
sequence t_seqAspirate_cleanupbeads;
sequence t_seqAspirate_cleanupbeads_distinct;
sequence t_seqAspirate_EndRepairandATailingMasterMix_distinct;
sequence t_seqAspirate_LigationMasterMix;
variable t_fltVolumeEndRepairAndATailingMasterMix_Process02;
variable t_fltDiscardSupernatant_Process07;
sequence t_seqAspirate_FragmentationMasterMix;
sequence t_seqAspirate_FragmentationMasterMix_distinct;
variable t_fltVolumeFragmentationMastermix_Process01;
variable t_intLigationSeconds;
variable t_blnProcess1or2or3or5Activated;
variable t_blnProcess4or6Activated;
variable t_fltDiscardSupernatant_Process04;
variable t_intRequiredNumberOf300uLTipsM2;
variable t_intRequiredNumberOf1000uLTipsM6;
variable t_intRequiredNumberOf1000uLTipsM7;
variable t_intRequiredNumberOf50uLTipsM2;
variable t_intRequiredNumberOf300uLTipsM6;
variable t_intRequiredNumberOf300uLTipsM7;
variable t_intRequiredNumberOf50uLTipsM6;
variable t_intRequiredNumberOf50uLTipsM7;
variable t_intRequiredNumberOf1000uLTipsM2;
variable t_blnRunSizeSelectionPostLigation;
variable t_blnRunSizeSelectionPostAmplification;
variable t_blnIsHyperPlusChemistry;
variable t_fltVolumeEthanol80_Process06;
variable t_blnIsPlatedPrimer;
sequence t_seqAspirate_UniversalAdapter_distinct;
sequence t_seqAspirate_UniveralAdapter;
variable t_fltVolumeAmpPrimer_Process05;
variable t_fltBeadRatioFirstCut;
variable t_fltBeadRatioSecondCut;
variable t_blnUsingWorklist;
variable t_blnStampPlate;
global device ML_STAR ("C:\\Program Files (x86)\\HAMILTON\\NGSStarMOA\\Roche\\KAPA HyperPlus Library Prep\\Methods\\NGS STAR MOA Roche KAPA Hyper Library Prep v0.1.5.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "templates\\HSLPipetteWizard.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable l_intCOREGripper(2); // Choose transport tool CORE Gripper to perform transport steps with CORE gripper instead of iswap. Value = 2
    private variable l_strChannelPatternAbort;
    private variable l_intResultTipCheck;
    private variable l_intTransportTool;
    private variable l_int_OptionSelected;
    private variable loopCounter1;
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIP_PRESENT_CHECK_5ML_1ML::_InitLibrary();
    NGSSTARPREP::_InitLibrary();
    NGSSTARPROCESSES::_InitLibrary();
    COLORSCHEMELIBRARY::_InitLibrary();
    NGSSTARLOADING::_InitLibrary();
    STACKREDUCER::_InitLibrary();
    STAR_TIP_TOOLS::_InitLibrary();
    TOOLS_LIBRARY::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod: KAPA HyperPlus Library Prep Method\nBy:          William Hutchens, Hamilton, Reno; \n               Sequencing Workflow Automation Group, Roche Diagnostics, Pleasanton\nVersion:  0.2.6\nBased on  Roche KAPA HyperPlus / HyperPrep Library Prep\n\nVersion Notes: This method supports Kit part numbers KK8501, KK8503, KK8505, KK8500, KK8502, and KK8504 provide by Roche KAPA.\n\n\n\nVersioning : see VersionHistory for previous versions\n\n\n0.1.8 \n          -modified Etoh volume to 150 for SS.\n          -changed vortex speed to 1400rpm for cleanups (1800 was causing air bubbles)\n          -doubled vortex time for cleanups to compensate for lower speed.\n          -increased dead vol 40-->50ul for frag, erat, and lig MMs\n0.1.9\n          -increased MM dead volume to: \n           Frag, ERAT, AdLig - 40ul +20%\n           PCR - 60ul + 3%\n\n0.2.1\n         -Referenced method specific liquid classes E.G. \"Kapa_50F_HyperPrepHyperPlus_PCRMasterMix_SurfaceEmpty\" in MM additions.\n         -Changed \"adaptor\" to \"adapter\"\n         -Modified string in Frag time user dialog.\n         -Modified string in Ligation user dialog.\n         -Added \"HyperPrep\" to file name.\n\n0.2.2\n        - Added improved size selection multiple choice logic\n        - Updated wording in a few places\n        - ODTC will only pre-heat for PCR at the end of ligation if PCR is activated\n        - Fixed a bug where the ODTC was not correctly turned on if starting the run at post ligation cleanup and doing PCR. \n\n0.2.3\n        -Deleted some disabled lines.\n        -Slightly modified file name.\n\n0.2.4\n        - Corrected duplicate tip counters with conflicting information and consoldiated code into the pipetting controller\n        - removed all carrier barcode scanning to prevent extra dialogs from appearing and throwing errors\n\n0.2.5\n        - Corrected user dialog verbiage\n        - corrected change log\n\n0.2.6 \n        - corrected ODTC file in dependencies\n        - corrected process 2 ODTC init command initial temperature. \n"));
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
    INIT_WORKLIST_LOCATION::LockLibrary();
    t_strTipCounterNameTip50 = Translate("50F_Counter");
    t_strTipCounterNameTip300 = Translate("SVF_Counter");
    t_strTipCounterNameTip1000 = Translate("1000F_Counter");
    t_blnSkipLoadingRoutine = ASWGLOBAL::BOOL::TRUE;
    t_blnUseMPHInsteadOfChannels = ASWGLOBAL::BOOL::TRUE;
    t_blnReduceDeckTo4ChannelSystem = ASWGLOBAL::BOOL::FALSE;
    t_blnActivateLockUnlockOfFrontCover = ASWGLOBAL::BOOL::FALSE;
    t_blnMeasureVolumeWithinTroughs = ASWGLOBAL::BOOL::FALSE;
    t_strHamiltonDirectory = Translate("C:\\Program Files (x86)\\Hamilton\\");
    t_str_KitSupplier = Translate("Roche");
    t_str_KitTitle = Translate("KAPA HyperPlus Library Prep");
    t_str_PlatformUsed = Translate("NGSStarMOA");
    l_intPlatformUsed = 4;
    t_intMaxPlatesPerStackMIDI = 4;
    t_intMaxPlatesPerStackHSP = 4;
    t_intMaxComfortLidPerStack = 5;
    t_blnSimulationMode = Util::GetSimulationMode();
    t_strSerialNumberMLStar = GetSerialNumber(ML_STAR);
    NGSSTARPREP::DATA_HandOverSimulationModeForAllLocalSMTs(t_blnSimulationMode, ASWGLOBAL::BOOL::FALSE);
    l_intTransportTool = l_intCOREGripper;
    t_strEmailAddress = Translate("");
    t_strODTCDirectory = Translate("Files\\ODTC_scripts\\");
    t_strODTCDirectory = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), t_strODTCDirectory, Translate(""), Translate(""), Translate(""), Translate(""));
    t_blnODTCused = ASWGLOBAL::BOOL::FALSE;
    t_blnTestODTCWithShortDummyProtocol = ASWGLOBAL::BOOL::FALSE;
    if (t_blnTestODTCWithShortDummyProtocol == ASWGLOBAL::BOOL::TRUE)
    {
      t_strODTCFolderXML = StrConcat2(t_strODTCDirectory, Translate("KAPA Hyper Kit_shortGINIT.xml"));
    }
    else
    {
      t_strODTCFolderXML = StrConcat2(t_strODTCDirectory, Translate("KAPA Hyper Kit_GINIT.xml"));
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      t_strDeviceAddressODTC = "169.254.196.197";
      t_strLocalIPAddressOfComputer = "169.254.26.188";
    }
    else
    {
      t_strDeviceAddressODTC = "No ODTC used";
    }
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    COLORSCHEMELIBRARY::Assign(0);
    VectorCustomDialogs::Initialize();
    VectorCustomDialogs::ShowStatusDialog(Translate("Library Prep Kit for KAPA HyperPlus"));
    VectorCustomDialogs::SetStatusText(Translate("Run Preparation..."));
    VectorCustomDialogs::SetStatusText(Translate("   Initializing Liquid Waste Sensor..."));
    if(0){
      NGSSTARPREP::LiquidWasteSensor_Init(2);
    }
    VectorCustomDialogs::SetStatusText(Translate("   Initializing CPAC chiller..."));
    NGSSTARPREP::CPAC_Init();
    NGSSTARPREP::CPAC_SetTemperature(6);
    VectorCustomDialogs::SetStatusText(Translate("   Initializing Hamilton Heater Shakers (HHSs)..."));
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::HHS_Init(t_intHHS3_HSP3_MIDI3, t_intHHS2_HSP2, t_intHHS1_HSP1, t_intHHS4_MIDI1, t_intHHS5_MIDI2, Translate("TCC"), Translate("0"), Translate("0"), Translate("0"), Translate("0"), ML_STAR);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS3_HSP3_MIDI3, 0);
    }
    else
    {
      NGSSTARPREP::HHS_Init(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2, Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), Translate("HHSB"), ML_STAR);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS1_HSP1, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS2_HSP2, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS3_HSP3_MIDI3, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS4_MIDI1, 0);
      NGSSTARPREP::HHS_SetTemperature(t_intHHS5_MIDI2, 0);
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_Init(t_strDeviceAddressODTC, t_intDeviceNumberODTC, t_strLocalIPAddressOfComputer);
    }
    NGSSTARPROCESSES::DATA_HandoverSequencesAndDataToSMT(ML_STAR, l_intTransportTool, t_str_KitSupplier, t_str_KitTitle, ASWGLOBAL::BOOL::FALSE, t_blnReduceDeckTo4ChannelSystem, t_strEmailAddress, t_blnActivateLockUnlockOfFrontCover, t_strFullPathReportFile, t_blnUseMPHInsteadOfChannels, l_intPlatformUsed, t_strTipCounterNameTip50, t_strTipCounterNameTip300, t_strTipCounterNameTip1000, l_seqTip50, l_seqTip300, l_seqTip1000);
    NGSSTARLOADING::DATA_HandOverDataToSMT_NGSStarLoading(t_strFullPathReportFile, l_intPlatformUsed, t_str_KitSupplier, t_str_KitTitle, t_blnUseMPHInsteadOfChannels, t_blnActivateLockUnlockOfFrontCover, t_strTipCounterNameTip50, t_strTipCounterNameTip300, t_strTipCounterNameTip1000, l_seqTip50, l_seqTip300, l_seqTip1000, ASWGLOBAL::BOOL::FALSE);
    _SelectProcesses();
    SeqRemoveAll(t_seqMlStarSequenceNotUsed);
    VectorCustomDialogs::SetStatusText(Translate("   Resources required..."));
    _CalculateAndLoadConsumables();
    NGSSTARPROCESSES::DATA_TrackDataFromLoadingSMT(g_int_TotalNumberOf50Tips, g_int_TotalNumberOf300Tips, g_int_TotalNumberOf1000Tips, t_intNumberOfSamplesFromFile);
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process1_EnzymaticFragmentation();
    }
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process2_EndRepairAndATailing();
    }
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process3_AdapterLigation();
    }
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process4_PostLigationCleanup();
    }
    if (t_blnRunSizeSelectionPostLigation == ASWGLOBAL::BOOL::TRUE)
    {
      Process7_SizeSelection();
    }
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process5_LibraryAmplification();
    }
    if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      Process6_PostAmplificationCleanup();
    }
    if (t_blnRunSizeSelectionPostAmplification == ASWGLOBAL::BOOL::TRUE)
    {
      Process7_SizeSelection();
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to unload all carriers?"), Translate("Yes"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to unload all carriers?"), Translate("No"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to defragment the tip racks?"), Translate("Yes"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(5, Translate("Do you want to defragment the tip racks?"), Translate("No"));
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(5);
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(5, Translate("Do you want to defragment the tip racks?"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      VectorCustomDialogs::SetStatusText(Translate("Defragment tip racks..."));
      NGSSTARPROCESSES::PIP_DefragmentTipRacks(ML_STAR);
    }
    VectorCustomDialogs::SetStatusText(Translate(" ииииииииииииии METHOD COMPLETED ииииииииииииии "));
    NGSSTARLOADING::Display_Message_Dialog(Translate("Method completed successfully. Press OK to finish the run."));
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(5, Translate("Do you want to unload all carriers?"), l_int_OptionSelected);
    Trace("Option selected : ",l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      VectorCustomDialogs::SetStatusText(Translate("Unloading the deck..."));
      MECC::TraceComment(Translate("***** Unload Carriers *****"));
      if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
      }
      if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      else
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
    }
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_1 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_1 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    l_strLastMessage = StrConcat8(Translate("Dear user, \n"), Translate(""), Translate("check your system :  \n\n"), Translate(""), Translate("1) Check / empty the tip waste, \n"), Translate("2) Check / empty the liquid waste container, \n"), Translate("3) Remove and store reagents and created plates. \n"), Translate(""));
    NGSSTARLOADING::Display_Message_Dialog(l_strLastMessage);
    VectorCustomDialogs::SetStatusText(Translate("Preparing for run shutdown..."));
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::PIP_CleanUpTipAdapter(ML_STAR, ASWGLOBAL::BOOL::TRUE);
    }
    NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
    NGSSTARPREP::HHS_Terminate(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2);
    NGSSTARPREP::CPAC_Terminate();
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_Terminate(t_intDeviceNumberODTC, ASWGLOBAL::BOOL::FALSE);
    }
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      l_intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, l_strChannelPatternAbort, 4);
    }
    else
    {
      l_intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, l_strChannelPatternAbort, 8);
    }
    if (l_intResultTipCheck == 1)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    else
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("Workflow completed"), Translate("All selected processes have been completed successfully. Clean the deck and empty the liquid waste."));
    }
    NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
    VectorCustomDialogs::Terminate();
    TIP_PRESENT_CHECK_5ML_1ML::_ExitLibrary();
    NGSSTARPREP::_ExitLibrary();
    NGSSTARPROCESSES::_ExitLibrary();
    COLORSCHEMELIBRARY::_ExitLibrary();
    NGSSTARLOADING::_ExitLibrary();
    STACKREDUCER::_ExitLibrary();
    STAR_TIP_TOOLS::_ExitLibrary();
    TOOLS_LIBRARY::_ExitLibrary();
  } }
