private function Process1_EnzymaticFragmentation(  ) void ;
private function Process2_EndRepairAndATailing(  ) void ;
private function Process3_AdapterLigation(  ) void ;
private function Process4_PostLigationCleanup(  ) void ;
private function Process5_LibraryAmplification(  ) void ;
private function Process6_PostAmplificationCleanup(  ) void ;
private function Process7_SizeSelection(  ) void ;
private function _CalculateAndLoadConsumables(  ) void ;
private function _SelectProcesses(  ) void ;
private function _VersionHistory(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private variable l_strChannelPatternAbort;
  private variable l_intResultTipCheck;
  private variable l_retValueDialog;
  MECC::TraceComment(Translate("\n\n\nON ABORT STARTS TO SHUT DOWN DEVICES\n\n"));
  VectorCustomDialogs::SetStatusText(Translate("¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨METHOD ABORTED¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨¨"));
  if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::DATA_SendEmail(Translate("Method aborted"), Translate("Read report file and logfile. Clean the deck and empty the liquid waste."));
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_Terminate(t_intDeviceNumberODTC, ASWGLOBAL::BOOL::TRUE);
  }
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPROCESSES::DATA_TipCounterWrite(ML_STAR);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, 0, 0, 0, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::TRUE);
  l_arrEndDialogListInformation.SetSize(0);
  l_arrEndDialogListInformation.AddAsLast(Translate("1) Check / empty the tip waste, "));
  l_arrEndDialogListInformation.AddAsLast(Translate("2) Check / empty the liquid waste container,"));
  l_arrEndDialogListInformation.AddAsLast(Translate("3) Remove and store reagents and created plates."));
  l_retValueDialog = VectorCustomDialogs::ListDialog(Translate("Method aborted."), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 60, Translate(""), Translate("Press OK to terminate all active devices and close the method."), l_arrEndDialogListInformation);
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  NGSSTARPREP::HHS_Terminate(t_intHHS1_HSP1, t_intHHS2_HSP2, t_intHHS3_HSP3_MIDI3, t_intHHS4_MIDI1, t_intHHS5_MIDI2);
  NGSSTARPREP::CPAC_Terminate();
  l_intResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, l_strChannelPatternAbort, 8);
  if (l_intResultTipCheck == 1)
  {
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  else
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }
  VectorCustomDialogs::Terminate();
}

private function _VersionHistory(  ) void {
}

private function _CalculateAndLoadConsumables(  ) void {
  private variable l_intNumberOf50uLTips;
  private variable l_intNumberOfMIDIPlates;
  private variable l_intNumberOf1000uLTips;
  private variable l_intNumberOf300uLTips;
  private variable l_intNumberOfHSPPlates;
  private variable l_intNumberOfHamiltonComfortLids;
  private variable l_blnInputplateAlreadyLoaded;
  private variable l_blnHamiltonComfortLidAlreadyLoaded;
  private variable l_intNumberOf300ExtraTips;
  private variable l_intNumberOf50ExtraTips;
  private sequence l_arr_seqReagentsOn50mlContainers[];
  private variable l_bln_CarrierLoadable;
  private variable l_arr_fltReagentVolumesOn50mlContainerEthanol80[];
  private variable l_arr_fltReagentVolumesOn50mlContainerSamplePurificationBeads[];
  private variable l_arr_strReagentNamesOn50mlContainers[];
  private variable l_arr_fltReagentVolumesOnTubeAdapterFragmentationMasterMix[];
  private variable l_arr_fltReagentVolumesOn50mlContainers[];
  private variable l_arr_fltReagentVolumesOn50mlContainerTEBuffer[];
  private variable l_arr_fltReagentVolumesOnTubeAdapterAmplificationMastermix[];
  private variable l_arr_fltReagentVolumesOnTubeAdapterEndRepairMasterMix[];
  private variable l_arr_fltReagentVolumesOnTubeAdapterLigationMastermix[];
  private variable l_blnRunSizeSelection;
  private variable l_arr_fltReagentVolumesOnTubeAdapterUniversalAdapter[];
  private variable intBeadVolumeFirstCut;
  private variable intBeadVolumeSecondCut;
  private variable intBeadCleanupVolumePostLigation;
  private variable fltBeadCleanupRatio;
  private variable intBeadCleanupVolumePostAmp;
  private variable intNumTipsPerSample;
  private variable intNumSourceTubes;
  MECC::TraceComment(Translate("--------------- CalculateAndLoadConsumables"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Calculate and load consumables"), ASWGLOBAL::BOOL::YES);
  l_blnInputplateAlreadyLoaded = ASWGLOBAL::BOOL::FALSE;
  l_blnHamiltonComfortLidAlreadyLoaded = ASWGLOBAL::BOOL::FALSE;
  MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess1_Enzymatic Fragmentation\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltVolumeFragmentationMastermix_Process01 = NGSSTARLOADING::Define_VolumePerWell(Translate("Fragmentation Master Mix"), 15);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Fragmentation Master Mix"), Translate("KAPA Frag Buffer (10X)"), 5);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Fragmentation Master Mix"), Translate("KAPA Frag Enzyme"), 10);
    t_intRequiredNumberOf50uLTipsM1 = t_intNumberOfSamplesFromFile;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, t_intRequiredNumberOf50uLTipsM1, ML_STAR.MlStar50ulTipWithFilter, 0);
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, 1, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    }
    if (t_intSelectedIndexSTART == 1)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Double-stranded DNA (with Conditioning Solution, if needed) 35µl"), 1, ML_STAR.HSP_Pipette2, 0);
    }
  }
  MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess2_End Repair and A-tailing\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltVolumeEndRepairAndATailingMasterMix_Process02 = NGSSTARLOADING::Define_VolumePerWell(Translate("End Repair and A-Tailing Master Mix"), 10);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("End Repair and A-Tailing Master Mix"), Translate("KAPA End Repair & A-Tailing Buffer"), 7);
    NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("End Repair and A-Tailing Master Mix"), Translate("HyperPrep/HyperPlus ERAT Enzyme Mix"), 3);
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, 1, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    }
    t_intRequiredNumberOf50uLTipsM2 = t_intNumberOfSamplesFromFile;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, t_intRequiredNumberOf50uLTipsM2, ML_STAR.MlStar50ulTipWithFilter, 0);
    if (t_intSelectedIndexSTART == 2)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Fragmented, double-stranded DNA (50µl)"), 1, ML_STAR.HSP_Pipette2, 0);
    }
  }
  MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess3_Adapter Ligation\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnIsPlatedPrimer == ASWGLOBAL::BOOL::FALSE)
    {
      t_fltVolumeDilutedAdapter_Process03 = NGSSTARLOADING::Define_VolumePerWell(Translate("KAPA UDI Adapter"), 5.0);
      t_fltVolumeLigationMasterMix_Process03 = NGSSTARLOADING::Define_VolumePerWell(Translate("Ligation Master Mix"), 45);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Ligation Master Mix"), Translate("PCR-Grade Water"), 5);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Ligation Master Mix"), Translate("KAPA Ligation Buffer"), 30);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Ligation Master Mix"), Translate("KAPA Ligase"), 10);
    }
    else
    {
      t_fltVolumeDilutedAdapter_Process03 = NGSSTARLOADING::Define_VolumePerWell(Translate("Universal Adapter"), 10.0);
      t_fltVolumeLigationMasterMix_Process03 = NGSSTARLOADING::Define_VolumePerWell(Translate("Ligation Master Mix"), 40);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Ligation Master Mix"), Translate("KAPA Ligation Buffer"), 30);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Ligation Master Mix"), Translate("KAPA Ligase"), 10);
    }
    if (t_blnIsPlatedPrimer == ASWGLOBAL::BOOL::FALSE)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("KAPA UDI Adapters"), 1, ML_STAR.HSP_Pipette, 0);
    }
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, 1, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    }
    t_intRequiredNumberOf50uLTipsM3 = t_intNumberOfSamplesFromFile * 1;
    t_intRequiredNumberOf300uLTipsM3 = t_intNumberOfSamplesFromFile * 1;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, t_intRequiredNumberOf50uLTipsM3, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, t_intRequiredNumberOf300uLTipsM3, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    if (t_intSelectedIndexSTART == 3)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("End Repair and A-Tailing reaction product (60µl)"), 1, ML_STAR.HSP_Pipette2, 0);
    }
  }
  MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess4_Post-ligation Cleanup\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    fltBeadCleanupRatio = 0.8;
    intBeadCleanupVolumePostLigation = 110 * fltBeadCleanupRatio;
    t_fltVolumeBeads_Process04 = NGSSTARLOADING::Define_VolumePerWell(Translate("KAPA HyperPure Beads"), intBeadCleanupVolumePostLigation);
    t_fltVolumeEthanol80_Process04 = NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 150);
    NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 150);
    if (t_blnRunSizeSelectionPostLigation == ASWGLOBAL::BOOL::TRUE)
    {
      t_fltVolumeTrisBuffer_Process04 = NGSSTARLOADING::Define_VolumePerWell(Translate("10 mM Tris-HCL"), 55);
    }
    else
    {
      MECC::TraceComment(Translate("******************* updated the elution volume from 20uL to 25uL for single cleanup------- Roche edit ************************"));
      t_fltVolumeTrisBuffer_Process04 = NGSSTARLOADING::Define_VolumePerWell(Translate("10 mM Tris-HCL"), 25);
    }
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOf300uLTips = 7 * t_intNumberOfSamplesFromFile;
      l_intNumberOf300ExtraTips = 8;
      l_intNumberOf300uLTips = l_intNumberOf300uLTips + l_intNumberOf300ExtraTips;
      l_intNumberOf1000uLTips = 16;
      l_intNumberOf50uLTips = l_intNumberOf50uLTips + l_intNumberOf50ExtraTips;
    }
    else
    {
      l_intNumberOf300uLTips = 7 * t_intNumberOfSamplesFromFile;
      l_intNumberOf300ExtraTips = 8;
      l_intNumberOf300uLTips = l_intNumberOf300uLTips + l_intNumberOf300ExtraTips;
      l_intNumberOf1000uLTips = 16;
      l_intNumberOf50uLTips = l_intNumberOf50uLTips + l_intNumberOf50ExtraTips;
    }
    MECC::TraceComment(Translate("*******************Added I_intNumberOfHSPPlates assignment in an if statement for Size Selection option to calculate correct number of HSP plates needed ------------------ Roche edit ****************"));
    if (t_blnRunSizeSelectionPostLigation == ASWGLOBAL::BOOL::FALSE)
    {
      l_intNumberOfHSPPlates = 1;
    }
    else
    {
      l_intNumberOfHSPPlates = 0;
    }
    t_intRequiredNumberOf1000uLTipsM4 = l_intNumberOf1000uLTips;
    t_intRequiredNumberOf300uLTipsM4 = l_intNumberOf300uLTips;
    t_intRequiredNumberOf50uLTipsM4 = l_intNumberOf50uLTips;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
    MECC::TraceComment(Translate("********************updated HSP number of units from \"1\" to I_intNumberOfHSPPlates  ------------------ Roche edit ****************"));
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, 1, ML_STAR.Stack1, 0);
    if (t_intSelectedIndexSTART == 4)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Adapter ligation reaction product (110 µl)"), 1, ML_STAR.HSP_Pipette2, 0);
    }
    t_fltDiscardSupernatant_Process04 = 200;
  }
  MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess5_Library Amplification\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnIsPlatedPrimer == ASWGLOBAL::BOOL::TRUE)
    {
      t_fltVolumeAmplificationMastermix_Process05 = NGSSTARLOADING::Define_VolumePerWell(Translate("KAPA HiFi HotStart Ready Mix (2X)"), 25);
      t_fltVolumeAmpPrimer_Process05 = NGSSTARLOADING::Define_VolumePerWell(Translate("KAPA UDI Primer Mix"), 5.0);
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("KAPA UDI Primers"), 1, ML_STAR.HSP_Pipette, 0);
      intNumTipsPerSample = 2;
    }
    else
    {
      t_fltVolumeAmplificationMastermix_Process05 = NGSSTARLOADING::Define_VolumePerWell(Translate("Amplification Master Mix"), 30);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Amplification Master Mix"), Translate("KAPA HiFi Hotstart ReadyMix (2X)"), 25.0);
      NGSSTARLOADING::Define_VolumePerWell_MastermixComponent(Translate("Amplification Master Mix"), Translate("KAPA Library Amplification Primer Mix (10X)"), 5.0);
      intNumTipsPerSample = 1;
    }
    l_intNumberOfMIDIPlates = 0;
    l_intNumberOfHSPPlates = 0;
    if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumberOfHamiltonComfortLids = 1;
    }
    l_intNumberOf1000uLTips = 0;
    l_intNumberOf300uLTips = 0 * t_intNumberOfSamplesFromFile;
    l_intNumberOf50uLTips = intNumTipsPerSample * t_intNumberOfSamplesFromFile;
    t_intRequiredNumberOf1000uLTipsM5 = l_intNumberOf1000uLTips;
    t_intRequiredNumberOf300uLTipsM5 = l_intNumberOf300uLTips;
    t_intRequiredNumberOf50uLTipsM5 = l_intNumberOf50uLTips;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack1, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    if (t_intSelectedIndexSTART == 5)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Adapter-ligated library (20µl)"), 1, ML_STAR.HSP_Pipette2, 0);
    }
  }
  MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess6_Post-amplification Cleanup\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    fltBeadCleanupRatio = 1;
    intBeadCleanupVolumePostAmp = 50 * fltBeadCleanupRatio;
    t_fltVolumeBeads_Process06 = NGSSTARLOADING::Define_VolumePerWell(Translate("KAPA HyperPure Beads"), intBeadCleanupVolumePostAmp);
    t_fltVolumeEthanol80_Process06 = NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 150);
    NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 150);
    if (t_blnRunSizeSelectionPostAmplification == ASWGLOBAL::BOOL::TRUE)
    {
      t_fltVolumeTrisBuffer_Process06 = NGSSTARLOADING::Define_VolumePerWell(Translate("10 mM Tris-HCL"), 55);
    }
    else
    {
      t_fltVolumeTrisBuffer_Process06 = NGSSTARLOADING::Define_VolumePerWell(Translate("10 mM Tris-HCL"), 25);
    }
    l_intNumberOfMIDIPlates = 1;
    MECC::TraceComment(Translate("*******************nested I_intNumberOfHSPPlates assignment in an if statement for Size Selection option to calculate correct number of HSP plates needed ------------------ Roche edit ****************"));
    if (t_blnRunSizeSelectionPostAmplification == ASWGLOBAL::BOOL::FALSE)
    {
      l_intNumberOfHSPPlates = 1;
    }
    else
    {
      l_intNumberOfHSPPlates = 0;
    }
    l_intNumberOfHamiltonComfortLids = 0;
    l_intNumberOf1000uLTips = 16;
    l_intNumberOf50uLTips = 0 * t_intNumberOfSamplesFromFile;
    l_intNumberOf50ExtraTips = 0;
    l_intNumberOf50uLTips = l_intNumberOf50uLTips + l_intNumberOf50ExtraTips;
    l_intNumberOf300uLTips = 7 * t_intNumberOfSamplesFromFile;
    l_intNumberOf300ExtraTips = 8;
    l_intNumberOf300uLTips = l_intNumberOf300uLTips + l_intNumberOf300ExtraTips;
    t_intRequiredNumberOf1000uLTipsM6 = l_intNumberOf1000uLTips;
    t_intRequiredNumberOf300uLTipsM6 = l_intNumberOf300uLTips;
    t_intRequiredNumberOf50uLTipsM6 = l_intNumberOf50uLTips;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack1, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    if (t_intSelectedIndexSTART == 6)
    {
      NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, Translate("Library amplification reaction product (50µl)"), 1, ML_STAR.HSP_Pipette2, 0);
    }
    t_fltDiscardSupernatant_Process06 = 200;
  }
  MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------\nProcess7_Size Selection\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (t_blnRunSizeSelectionPostLigation == ASWGLOBAL::BOOL::TRUE)
  {
    l_blnRunSizeSelection = ASWGLOBAL::BOOL::TRUE;
  }
  else
  {
    if (t_blnRunSizeSelectionPostAmplification == ASWGLOBAL::BOOL::TRUE)
    {
      l_blnRunSizeSelection = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      l_blnRunSizeSelection = ASWGLOBAL::BOOL::FALSE;
    }
  }
  if (l_blnRunSizeSelection == ASWGLOBAL::BOOL::TRUE)
  {
    intBeadVolumeFirstCut = 50 * t_fltBeadRatioFirstCut;
    intBeadVolumeSecondCut = 50 * t_fltBeadRatioSecondCut;
    intBeadVolumeSecondCut = intBeadVolumeSecondCut - intBeadVolumeFirstCut;
    t_fltVolumeBeads01_Process07 = NGSSTARLOADING::Define_VolumePerWell(Translate("KAPA HyperPure Beads"), intBeadVolumeFirstCut);
    t_fltVolumeBeads02_Process07 = NGSSTARLOADING::Define_VolumePerWell(Translate("KAPA HyperPure Beads"), intBeadVolumeSecondCut);
    t_fltVolumeEthanol80_Process07 = NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 150);
    NGSSTARLOADING::Define_VolumePerWell(Translate("Ethanol 80%"), 150);
    t_fltVolumeTrisBuffer_Process07 = NGSSTARLOADING::Define_VolumePerWell(Translate("10 mM Tris-HCL"), 25);
    l_intNumberOfMIDIPlates = 2;
    l_intNumberOfHSPPlates = 1;
    l_intNumberOfHamiltonComfortLids = 0;
    l_intNumberOf1000uLTips = 16;
    l_intNumberOf50uLTips = 1 * t_intNumberOfSamplesFromFile;
    l_intNumberOf50ExtraTips = 0;
    l_intNumberOf50uLTips = l_intNumberOf50uLTips + l_intNumberOf50ExtraTips;
    l_intNumberOf300uLTips = 6 * t_intNumberOfSamplesFromFile;
    l_intNumberOf300ExtraTips = 16;
    l_intNumberOf300uLTips = l_intNumberOf300uLTips + l_intNumberOf300ExtraTips;
    t_intRequiredNumberOf1000uLTipsM7 = l_intNumberOf1000uLTips;
    t_intRequiredNumberOf300uLTipsM7 = l_intNumberOf300uLTips;
    t_intRequiredNumberOf50uLTipsM7 = l_intNumberOf50uLTips;
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP50, ARW_Global::LabwareType::TIP50, l_intNumberOf50uLTips, ML_STAR.MlStar50ulTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP300, ARW_Global::LabwareType::TIP300, l_intNumberOf300uLTips, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIP1000, ARW_Global::LabwareType::TIP1000, l_intNumberOf1000uLTips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::HSP_Plate, ARW_Global::LabwareType::HSP_Plate, l_intNumberOfHSPPlates, ML_STAR.Stack4, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::MIDI_Plate, ARW_Global::LabwareType::MIDI_Plate, l_intNumberOfMIDIPlates, ML_STAR.Stack1, 0);
    NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::Comfortlid, ARW_Global::LabwareType::Comfortlid, l_intNumberOfHamiltonComfortLids, ML_STAR.Ham_ComfortLid_Stack_ParkPos, 0);
    t_fltDiscardSupernatant_Process07 = 200;
  }
  MECC::TraceComment(Translate("-------------------------------------------------------------------------------------------------------------------------------------------------------------------------\nCalculate Resources\n-------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (t_intNumberOfSamplesFromFile <= 24)
  {
    intNumSourceTubes = 1;
  }
  else
  {
    if (t_intNumberOfSamplesFromFile <= 48)
    {
      intNumSourceTubes = 2;
    }
    else
    {
      intNumSourceTubes = 4;
    }
  }
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Fragmentation Master Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 40, 20, ML_STAR.seq_FragmentationMasterMix, 0, intNumSourceTubes, t_seqAspirate_FragmentationMasterMix_distinct, t_seqAspirate_FragmentationMasterMix, l_arr_fltReagentVolumesOnTubeAdapterFragmentationMasterMix);
  SeqGetLabwareId(t_seqAspirate_FragmentationMasterMix);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("End Repair and A-Tailing Master Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 40, 20, ML_STAR.seq_EndRepairATailingMasterMix, 0, intNumSourceTubes, t_seqAspirate_EndRepairandATailingMasterMix_distinct, t_seqAspirate_EndRepairandATailingMasterMix, l_arr_fltReagentVolumesOnTubeAdapterEndRepairMasterMix);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Ligation Master Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 40, 20, ML_STAR.seq_LigationMasterMix, 0, intNumSourceTubes, t_seqAspirate_LigationMasterMix_distinct, t_seqAspirate_LigationMasterMix, l_arr_fltReagentVolumesOnTubeAdapterLigationMastermix);
  if (t_blnIsPlatedPrimer == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Universal Adapter"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 40, 20, ML_STAR.seq_UniversalAdapter, 0, 0, t_seqAspirate_UniversalAdapter_distinct, t_seqAspirate_UniveralAdapter, l_arr_fltReagentVolumesOnTubeAdapterUniversalAdapter);
  }
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("KAPA HyperPure Beads"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 50000, 3000, 10, ML_STAR.RGT50, 1, 0, t_seqAspirate_cleanupbeads_distinct, t_seqAspirate_cleanupbeads, l_arr_fltReagentVolumesOn50mlContainerSamplePurificationBeads);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Ethanol 80%"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 50000, 7000, 10, ML_STAR.RGT50, 2, 0, t_seqAspirate_Ethanol80_distinct, t_seqAspirate_Ethanol80, l_arr_fltReagentVolumesOn50mlContainerEthanol80);
  NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("10 mM Tris-HCL"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::HamiltonTrough50mL, 50000, 3000, 10, ML_STAR.RGT50, 5, 0, t_seqAspirate_TrisBuffer_distinct, t_seqAspirate_TrisBuffer, l_arr_fltReagentVolumesOn50mlContainerTEBuffer);
  if (t_blnIsPlatedPrimer == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("KAPA HiFi HotStart Ready Mix (2X)"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 60, 3, ML_STAR.seq_KAPAHiFiHotStartReadyMix, 0, intNumSourceTubes, t_seqAspirate_AmplificationMastermix_distinct, t_seqAspirate_AmplificationMastermix, l_arr_fltReagentVolumesOnTubeAdapterAmplificationMastermix);
  }
  else
  {
    NGSSTARLOADING::Calculate_TotalVolumeAndSequenceToAspirate(ML_STAR, Translate("Amplification Master Mix"), t_intNumberOfSamplesFromFile, ARW_Global::LabwareType::Sarstedt_Tube_2mL, 2000, 60, 3, ML_STAR.seq_KAPAHiFiHotStartReadyMix, 0, intNumSourceTubes, t_seqAspirate_AmplificationMastermix_distinct, t_seqAspirate_AmplificationMastermix, l_arr_fltReagentVolumesOnTubeAdapterAmplificationMastermix);
  }
  NGSSTARLOADING::Display_Mastermix_Dialog();
  MECC::TraceComment(Translate("After all liquids have been defined..the evaluate step calculates the needed resources\n"));
  NGSSTARLOADING::Evaluate_ResourcesByCarrier();
  NGSSTARLOADING::Retrieve_50mlTrough_ReagentsVolumesAndSequences(l_arr_strReagentNamesOn50mlContainers, l_arr_fltReagentVolumesOn50mlContainers, l_arr_seqReagentsOn50mlContainers);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrIndex1PositionIDs, t_seq_IndexPlate_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrIndex1PositionIDs, t_trp_IndexPlate_Pipette, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_ODTC, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_ODTC, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Pipette, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_Pipette2, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Pipette2, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Pipette2, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_seqHSP_OnMagnet, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_OnMagnet, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpHSP_Waste, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.Ham_ComfortLid_ODTC, t_arrAdapterLigationPlatePositionIDs, t_trpHamiltonComfortLidODTC, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.Ham_ComfortLid_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpHamiltonComfortLidWaste, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arrAdapterLigationPlatePositionIDs, t_seqMIDI_Pipette, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Pipette, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_Pipette, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_seqMIDI_OnMagnet, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_OnMagnet, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_OnMagnet, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.MIDI_Waste, t_arrAdapterLigationPlatePositionIDs, t_trpMIDI_Waste, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_seqHHS3_MIDI, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HHS3_MIDI, t_arrAdapterLigationPlatePositionIDs, t_trpHHS3_MIDI, 2);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_CPAC, t_arrAdapterLigationPlatePositionIDs, t_seqCPAC_HSP, 1);
  NGSSTARPROCESSES::DATA_CreateNewSequencesOrTransportSequences(ML_STAR.HSP_CPAC, t_arrAdapterLigationPlatePositionIDs, t_trpCPAC_HSP, 2);
  MECC::TraceComment(Translate("Setting sequences completed"));
  SeqRemoveAll(t_trp_Stack1);
  SeqRemoveAll(t_trp_Stack4);
  SeqRemoveAll(t_trpHamiltonComfortLidStackParkPos);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfMIDI, ML_STAR.Stack1, t_trp_Stack1, t_intMaxPlatesPerStackMIDI, ML_STAR);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfHSP, ML_STAR.Stack4, t_trp_Stack4, t_intMaxPlatesPerStackHSP, ML_STAR);
  STACKREDUCER::StackReducer(g_int_TotalNumberOfComfortLid, ML_STAR.Ham_ComfortLid_Stack_ParkPos, t_trpHamiltonComfortLidStackParkPos, t_intMaxComfortLidPerStack, ML_STAR);
  Trace ("BEFORE  ********* g_int_TotalNumberOfComfortLid:   ", g_int_TotalNumberOfComfortLid);
  Trace ("********* t_intMaxComfortLidPerStack:   ", t_intMaxComfortLidPerStack);
  Trace ("********* l_intNumberOfHamiltonComfortLids:   ", l_intNumberOfHamiltonComfortLids);
  Trace ("********* g_int_TotalNumberOfHSP:   ", g_int_TotalNumberOfHSP);
  Trace ("********* t_intMaxPlatesPerStackHSP:   ", t_intMaxPlatesPerStackHSP);
  Trace ("********* l_intNumberOfHSPPlates:   ", l_intNumberOfHSPPlates);
  Trace ("********* g_int_TotalNumberOfMIDI:   ", g_int_TotalNumberOfMIDI);
  Trace ("********* t_intMaxPlatesPerStackMIDI:   ", t_intMaxPlatesPerStackMIDI);
  Trace ("********* l_intNumberOfMIDIPlates:   ", l_intNumberOfMIDIPlates);
  MECC::TraceComment(Translate("Stack reduced completed"));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::ODTC, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("ODTCHamiltonComforlidPosition.jpg"), Translate("HamiltonComfortLid.png"), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::PLT_Stack, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("PlateStackerCarrier.jpg"), Translate("PlateStackerCarrier_SubImage.jpg"), Translate(""));
  NGSSTARLOADING::Load_Carrier_MultiTipSeq(ML_STAR, ARW_Global::CarrierType::TIP50_02, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("Tip50ulFilterCarriers.jpg"), Translate("TIP_50.png"));
  NGSSTARLOADING::Add_LabwareForCurrentProcess(ML_STAR, ARW_Global::LabwareType::TIPAdapter, ARW_Global::LabwareType::TIPAdapter, 1, ML_STAR.TipSupport_0001, 0);
  NGSSTARLOADING::Load_Carrier_MultiTipSeq(ML_STAR, ARW_Global::CarrierType::TIP300_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("Tip300ulFilterCarriers.jpg"), Translate("Core96_TipSupport_Tip_300.jpg"));
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::TRUE)
  {
    l_bln_CarrierLoadable = ASWGLOBAL::BOOL::FALSE;
  }
  else
  {
    l_bln_CarrierLoadable = ASWGLOBAL::BOOL::TRUE;
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::RGT1, t_blnSkipLoadingRoutine, l_bln_CarrierLoadable, ASWGLOBAL::BOOL::FALSE, Translate("ReagentContainerCarrier1.jpg"), Translate(""), Translate(""));
  if (t_blnReduceDeckTo4ChannelSystem == ASWGLOBAL::BOOL::FALSE)
  {
    NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::RGT2, t_blnSkipLoadingRoutine, l_bln_CarrierLoadable, ASWGLOBAL::BOOL::FALSE, Translate("ReagentContainerCarrier2.jpg"), Translate(""), Translate(""));
  }
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Tube_Carrier24, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("CarrierVial24.jpg"), Translate(""), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Vial_Carrier32_01, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("CarrierVial32_1.jpg"), Translate(""), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::Vial_Carrier32_02, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("CarrierVial32_2.jpg"), Translate(""), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, Translate("MFX_CAR_2MTP_HPTab_MIDI_HPTab_2DWP_HPTab_0001"), t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE, Translate("DeckLayout_Carrier12.png"), Translate(""), Translate(""));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::HHSx2_PLT, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("HHS_HSP_PipettePosition.jpg"), Translate(""), Translate("*"));
  NGSSTARLOADING::Load_Carrier(ML_STAR, ARW_Global::CarrierType::CPAC, t_blnSkipLoadingRoutine, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE, Translate("CPACCarrier.jpg"), Translate("CPAC_Adapter.png"), Translate("*"));
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  NGSSTARLOADING::Display_Message_Dialog(Translate("Deck loading completed. Press OK to start the run."));
}

private function _SelectProcesses(  ) void {
  private variable l_intIndexSettingsDoubleOrSingleIndexing;
  private variable l_strIndexLabwareFormat;
  private variable l_strFileInputWorklist;
  private variable l_arr_strProcessID[];
  private variable l_intLengthEmailAddress;
  private variable l_int_OptionSelected;
  private variable l_int_PCRCycleCounter;
  private variable l_intDialogID;
  private variable l_intReturnValueDialog;
  private variable arrRanges[];
  private variable arrUnits[];
  private variable arrTooltip[];
  private variable arrSelectedResult[];
  private variable arrLabels[];
  private variable arrValues[];
  private variable arrTypes[];
  private variable l_intFragmentationMinutes;
  private variable l_arr_strMandatoryStopProcess[];
  private variable l_arr_strDeactivatedStartProcessID[];
  private variable l_arr_strProcessIDCombinations[];
  private variable l_intLigationMinutes;
  private variable blnPlatedIndexesImpact;
  private variable strMessage;
  private variable intIndexPlateStartPosition;
  private variable loopCounter1;
  private variable strPositionID;
  private variable intNumberIndices;
  private variable strSecondCut;
  private variable strFirstCut;
  private variable blnBreakLoop;
  private variable loopCounter2;
  private variable intNumAvailableIndexes;
  private variable l_int_OptionSelected2;
  private variable blnMultipleChoiceReduced;
  l_arr_strProcessID.SetSize(0);
  l_arr_strProcessID.AddAsLast(Translate("Process01: Enzymatic Fragmentation"));
  l_arr_strProcessID.AddAsLast(Translate("Process02: End Repair and A Tailing"));
  l_arr_strProcessID.AddAsLast(Translate("Process03: Adapter Ligation"));
  l_arr_strProcessID.AddAsLast(Translate("Process04: Post Ligation Cleanup"));
  l_arr_strProcessID.AddAsLast(Translate("Process05: Library Amplification"));
  l_arr_strProcessID.AddAsLast(Translate("Process06: Post Amplification Cleanup"));
  l_arr_strProcessIDCombinations.SetSize(0);
  l_arr_strProcessIDCombinations.AddAsLast(Translate("1.2.3.4.5.6"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("2.3.4.5.6"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("3.4.5.6"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("4.5.6"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("5.6"));
  l_arr_strProcessIDCombinations.AddAsLast(Translate("6"));
  l_arr_strDeactivatedStartProcessID.SetSize(0);
  l_arr_strMandatoryStopProcess.SetSize(0);
  MECC::TraceComment(Translate("PROCESS DEFINITIONS - INPUT"));
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strProcessID:"), l_arr_strProcessID);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strProcessIDCombinations:"), l_arr_strProcessIDCombinations);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strDeactivatedStartProcessID:"), l_arr_strDeactivatedStartProcessID);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("l_arr_strMandatoryStopProcess:"), l_arr_strMandatoryStopProcess);
  NGSSTARLOADING::Display_SelectProcesses_Dialog(1, l_arr_strProcessID, l_arr_strProcessIDCombinations, l_arr_strDeactivatedStartProcessID, l_arr_strMandatoryStopProcess, t_intSelectedIndexSTART, t_intSelectedIndexSTOP, t_arrBlnProcessActivation);
  if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    blnPlatedIndexesImpact = ASWGLOBAL::BOOL::TRUE;
  }
  else
  {
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      blnPlatedIndexesImpact = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      blnPlatedIndexesImpact = ASWGLOBAL::BOOL::FALSE;
    }
  }
  t_blnUsingWorklist = ASWGLOBAL::BOOL::FALSE;
  if (t_blnUsingWorklist == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARLOADING::Display_InputWorklist_Dialog(l_strFileInputWorklist);
    Trace ("Selected input worklist :", l_strFileInputWorklist);
    t_arrSamplePositionIDs.SetSize(0);
    t_arrIndex1PositionIDs.SetSize(0);
    t_arrIndex1IDs.SetSize(0);
    t_arrIndex2PositionIDs.SetSize(0);
    t_arrIndex2IDs.SetSize(0);
    NGSSTARLOADING::Read_InputWorklist_ExcelOrCSVFormat(l_strFileInputWorklist, ML_STAR.HSP_Pipette2, t_intNumberOfSamplesFromFile, l_intIndexSettingsDoubleOrSingleIndexing, t_arrIndex1PositionIDs, t_arrIndex1IDs, t_arrIndex2PositionIDs, t_arrIndex2IDs, t_arrAdapterLigatioPlateLabwareID, t_arrAdapterLigationPlatePositionIDs, l_strIndexLabwareFormat);
  }
  else
  {
    blnBreakLoop = ASWGLOBAL::BOOL::FALSE;
    {
      loopCounter2 = 0;
      while (blnBreakLoop == ASWGLOBAL::BOOL::FALSE)
      {
        loopCounter2 = loopCounter2 + 1;
        VectorCustomDialogs::Initialize();
        l_strIndexLabwareFormat = Translate("plate");
        arrLabels.SetSize(0);
        arrValues.SetSize(0);
        arrUnits.SetSize(0);
        arrTypes.SetSize(0);
        arrRanges.SetSize(0);
        arrTooltip.SetSize(0);
        arrSelectedResult.SetSize(2);
        arrLabels.AddAsLast(Translate("Number of samples"));
        arrValues.AddAsLast(Translate("24"));
        arrUnits.AddAsLast(Translate(" samples."));
        arrTypes.AddAsLast(1);
        arrRanges.AddAsLast(Translate("1|96"));
        arrTooltip.AddAsLast(Translate("Enter a value between 1 and 96"));
        if (blnPlatedIndexesImpact == ASWGLOBAL::BOOL::TRUE)
        {
          arrLabels.AddAsLast(Translate("Index plate starting position"));
          arrValues.AddAsLast(Translate("1"));
          arrUnits.AddAsLast(Translate(" position of first index to use."));
          arrTypes.AddAsLast(1);
          arrRanges.AddAsLast(Translate("1|96"));
          arrTooltip.AddAsLast(Translate("Enter a number between 1 and 96"));
        }
        l_intReturnValueDialog = VectorCustomDialogs::InputDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, Translate("Enter run information below."), Translate("Press OK to continue. CANCEL will abort the run."), arrLabels, arrValues, arrUnits, arrTypes, arrRanges, arrTooltip, arrSelectedResult);
        if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
        {
          t_intNumberOfSamplesFromFile=arrSelectedResult.GetAt(1-1);
          if (blnPlatedIndexesImpact == ASWGLOBAL::BOOL::TRUE)
          {
            intIndexPlateStartPosition=arrSelectedResult.GetAt(2-1);
          }
          else
          {
            intIndexPlateStartPosition = 1;
          }
          intNumAvailableIndexes = 97 - intIndexPlateStartPosition;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("Available Index Positions: "), intNumAvailableIndexes);
          if (intNumAvailableIndexes < t_intNumberOfSamplesFromFile)
          {
            blnBreakLoop = ASWGLOBAL::BOOL::FALSE;
            NGSSTARLOADING::Display_Message_Dialog(Translate("There are more samples selected than indexes. Please try again or abort the run."));
          }
          else
          {
            blnBreakLoop = ASWGLOBAL::BOOL::TRUE;
            t_arrAdapterLigationPlatePositionIDs.SetSize(0);
            {
              loopCounter1 = 0;
              ML_STAR.HSP_Pipette2.SetCurrentPosition(1);
              while (
                 (ML_STAR.HSP_Pipette2.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, ML_STAR.HSP_Pipette2, 1);
                loopCounter1 = loopCounter1 + 1;
                strPositionID = SeqGetPositionId(ML_STAR.HSP_Pipette2);
                t_arrAdapterLigationPlatePositionIDs.AddAsLast(strPositionID);
                SeqIncrement(ML_STAR.HSP_Pipette2, 1);
                if (loopCounter1 == t_intNumberOfSamplesFromFile)
                {
                  break;
                }
                if (
                   (ML_STAR.HSP_Pipette2.GetCurrentPosition() > 0 && ML_STAR.HSP_Pipette2.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              ML_STAR.HSP_Pipette2.SetMax(ML_STAR.HSP_Pipette2.GetTotal());
              ML_STAR.HSP_Pipette2.SetCurrentPosition(1);
            }
            if (blnPlatedIndexesImpact == ASWGLOBAL::BOOL::TRUE)
            {
              intNumberIndices = 0;
              {
                loopCounter1 = 0;
                ML_STAR.HSP_Pipette2.SetCurrentPosition(1);
                while (
                   (ML_STAR.HSP_Pipette2.GetCurrentPosition() > 0)
                )
                {
                  AlignSequences(hslTrue, ML_STAR.HSP_Pipette2, 1);
                  loopCounter1 = loopCounter1 + 1;
                  strPositionID = SeqGetPositionId(ML_STAR.HSP_Pipette2);
                  if (loopCounter1 >= intIndexPlateStartPosition)
                  {
                    t_arrIndex1PositionIDs.AddAsLast(strPositionID);
                    intNumberIndices = intNumberIndices + 1;
                  }
                  if (intNumberIndices == t_intNumberOfSamplesFromFile)
                  {
                    break;
                  }
                  SeqIncrement(ML_STAR.HSP_Pipette2, 1);
                  if (
                     (ML_STAR.HSP_Pipette2.GetCurrentPosition() > 0 && ML_STAR.HSP_Pipette2.GetMax() == 0 )
                  )
                  { MECC::EndlessSequenceLoopWarning(GetFileName()); }
                }
                ML_STAR.HSP_Pipette2.SetMax(ML_STAR.HSP_Pipette2.GetTotal());
                ML_STAR.HSP_Pipette2.SetCurrentPosition(1);
              }
            }
            else
            {
              t_arrIndex1PositionIDs=t_arrAdapterLigationPlatePositionIDs;
            }
            TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Sample array"), t_arrAdapterLigationPlatePositionIDs);
            TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Index array"), t_arrIndex1PositionIDs);
          }
        }
        else
        {
          MECC::TraceComment(Translate("User pressed cancel OR There was a wrong input"));
          abort;
        }
      }
    }
  }
  {
    //Need to determine if process 01, 02, or 04 is being run
    if (t_arrBlnProcessActivation.ElementAt(0)==1||t_arrBlnProcessActivation.ElementAt(1)==1||t_arrBlnProcessActivation.ElementAt(2)==1||t_arrBlnProcessActivation.ElementAt(4)==1)
    t_blnProcess1or2or3or5Activated = 1;
    else
    t_blnProcess1or2or3or5Activated = 0;
  }
  if (t_blnProcess1or2or3or5Activated == ASWGLOBAL::BOOL::TRUE)
  {
    l_intDialogID = 1;
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Is the ODTC Module used in this run?"), Translate("YES"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Is the ODTC Module used in this run?"), Translate("NO"));
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(l_intDialogID);
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Is the ODTC Module used in this run?"), l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      t_blnODTCused = ASWGLOBAL::BOOL::TRUE;
    }
    else
    {
      t_blnODTCused = ASWGLOBAL::BOOL::FALSE;
    }
  }
  else
  {
    t_blnODTCused = ASWGLOBAL::BOOL::FALSE;
  }
  t_blnIsHyperPlusChemistry = ASWGLOBAL::BOOL::FALSE;
  if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_blnIsHyperPlusChemistry = ASWGLOBAL::BOOL::TRUE;
  }
  else
  {
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      l_intDialogID = 4;
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Is this a HyperPrep run?"), Translate("YES - HyperPrep chemistry with mechanically fragmented DNA"));
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Is this a HyperPrep run?"), Translate("NO - HyperPlus chemistry with already enzymatically fragmented DNA"));
      NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(l_intDialogID);
      NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Is this a HyperPrep run?"), l_int_OptionSelected);
      if (l_int_OptionSelected == 1)
      {
        t_blnIsHyperPlusChemistry = ASWGLOBAL::BOOL::FALSE;
      }
      else
      {
        t_blnIsHyperPlusChemistry = ASWGLOBAL::BOOL::TRUE;
      }
    }
    else
    {
      t_blnIsHyperPlusChemistry = ASWGLOBAL::BOOL::FALSE;
    }
  }
  t_blnIsPlatedPrimer = ASWGLOBAL::BOOL::FALSE;
  if (blnPlatedIndexesImpact == ASWGLOBAL::BOOL::TRUE)
  {
    l_intDialogID = 6;
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Does this run use UDI (plated) adapters or primers?"), Translate("UDI Adapters"));
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Does this run use UDI (plated) adapters or primers?"), Translate("UDI Primers"));
    if (t_intNumberOfSamplesFromFile == 96)
    {
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Do you want to use the MPH to stamp the plate?"), Translate("Yes"));
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, Translate("Do you want to use the MPH to stamp the plate?"), Translate("No"));
    }
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(l_intDialogID);
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Does this run use UDI (plated) adapters or primers?"), l_int_OptionSelected);
    if (t_intNumberOfSamplesFromFile == 96)
    {
      NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, Translate("Do you want to use the MPH to stamp the plate?"), l_int_OptionSelected2);
    }
    if (l_int_OptionSelected == 1)
    {
      t_blnIsPlatedPrimer = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      t_blnIsPlatedPrimer = ASWGLOBAL::BOOL::TRUE;
    }
    if (t_intNumberOfSamplesFromFile == 96)
    {
      if (l_int_OptionSelected2 == 1)
      {
        t_blnStampPlate = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        t_blnStampPlate = ASWGLOBAL::BOOL::FALSE;
      }
    }
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_arrBlnProcessActivation.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate(" Select incubation time"));
      VectorCustomDialogs::Initialize();
      arrLabels.SetSize(0);
      arrValues.SetSize(0);
      arrUnits.SetSize(0);
      arrTypes.SetSize(0);
      arrRanges.SetSize(0);
      arrTooltip.SetSize(0);
      arrSelectedResult.SetSize(1);
      arrLabels.AddAsLast(Translate("Fragmentation time : "));
      arrValues.AddAsLast(Translate("20"));
      arrUnits.AddAsLast(Translate("minutes. Consult Kapa HyperPlus IFU for proper fragmentation time. (5-40 minutes)"));
      arrTypes.AddAsLast(1);
      arrRanges.AddAsLast(Translate("5|40"));
      arrTooltip.AddAsLast(Translate("Select a value between 5 and 40"));
      l_intReturnValueDialog = VectorCustomDialogs::InputDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, Translate("Select the desired fragmentation time."), Translate("Press OK to continue. CANCEL will abort the run."), arrLabels, arrValues, arrUnits, arrTypes, arrRanges, arrTooltip, arrSelectedResult);
      if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
      {
        l_intFragmentationMinutes=arrSelectedResult.GetAt(1-1);
        t_intFragmentationSeconds = l_intFragmentationMinutes * 60;
      }
      else
      {
        MECC::TraceComment(Translate("User pressed cancel OR There was a wrong input"));
        abort;
      }
    }
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate(" Select incubation time"));
      arrLabels.SetSize(0);
      arrValues.SetSize(0);
      arrUnits.SetSize(0);
      arrTypes.SetSize(0);
      arrRanges.SetSize(0);
      arrTooltip.SetSize(0);
      arrSelectedResult.SetSize(1);
      arrLabels.AddAsLast(Translate("Ligation Incubation Time : "));
      arrValues.AddAsLast(Translate("15"));
      arrUnits.AddAsLast(Translate(" minutes. Consult Kapa HyperPrep / HyperPlus IFU for alternate incubation times. (15 - 240 minutes)"));
      arrTypes.AddAsLast(1);
      arrRanges.AddAsLast(Translate("15|240"));
      arrTooltip.AddAsLast(Translate("Select a value between 15 and 240"));
      l_intReturnValueDialog = VectorCustomDialogs::InputDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, Translate("Select the desired ligation time."), Translate("Press OK to continue. CANCEL will abort the run."), arrLabels, arrValues, arrUnits, arrTypes, arrRanges, arrTooltip, arrSelectedResult);
      if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
      {
        l_intLigationMinutes=arrSelectedResult.GetAt(1-1);
        t_intLigationSeconds = l_intLigationMinutes * 60;
      }
      else
      {
        MECC::TraceComment(Translate("User pressed cancel OR There was a wrong input"));
        abort;
      }
    }
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      arrLabels.SetSize(0);
      arrValues.SetSize(0);
      arrUnits.SetSize(0);
      arrTypes.SetSize(0);
      arrRanges.SetSize(0);
      arrTooltip.SetSize(0);
      arrSelectedResult.SetSize(1);
      arrLabels.AddAsLast(Translate("PCR Cycles"));
      arrValues.AddAsLast(Translate("4"));
      arrUnits.AddAsLast(Translate(" cycles"));
      arrTypes.AddAsLast(1);
      arrRanges.AddAsLast(Translate("1|19"));
      arrTooltip.AddAsLast(Translate("Enter a value between 1 and 19"));
      l_intReturnValueDialog = VectorCustomDialogs::InputDialog(Translate(""), VectorCustomDialogs::ButtonType::OkCancel, 0, 0, Translate("Enter the number of PCR cycles needed in this run."), Translate("Press OK to continue. CANCEL will abort the run."), arrLabels, arrValues, arrUnits, arrTypes, arrRanges, arrTooltip, arrSelectedResult);
      if (l_intReturnValueDialog == ASWGLOBAL::DIALOG::OK)
      {
        t_strPCRProgramODTC = Translate("HYPER_PCRCycles");
        l_int_PCRCycleCounter=arrSelectedResult.GetAt(1-1);
        t_strPCRProgramODTC = StrConcat4(t_strPCRProgramODTC, l_int_PCRCycleCounter, Translate(""), Translate(""));
        Trace ("t_strPCRProgramODTC :   ",t_strPCRProgramODTC);
      }
      else
      {
        MECC::TraceComment(Translate("User pressed cancel OR There was a wrong input"));
        abort;
      }
    }
  }
  if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    t_blnProcess4or6Activated = ASWGLOBAL::BOOL::TRUE;
  }
  else
  {
    if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      t_blnProcess4or6Activated = ASWGLOBAL::BOOL::TRUE;
    }
  }
  if (t_blnProcess4or6Activated == ASWGLOBAL::BOOL::TRUE)
  {
    t_fltBeadRatioFirstCut = 0.7;
    t_fltBeadRatioSecondCut = 0.9;
    t_fltBeadRatioFirstCut = MthRound(t_fltBeadRatioFirstCut, 2);
    t_fltBeadRatioSecondCut = MthRound(t_fltBeadRatioSecondCut, 2);
    strFirstCut = APPSLIB::StrConvertToString(t_fltBeadRatioFirstCut);
    strSecondCut = APPSLIB::StrConvertToString(t_fltBeadRatioSecondCut);
    strFirstCut = APPSLIB::StringLeft(strFirstCut, 4);
    strSecondCut = APPSLIB::StringLeft(strSecondCut, 4);
    strMessage = StrConcat8(Translate("Do you want to run ("), strFirstCut, Translate("x and "), strSecondCut, Translate("x cuts) Size Selection?"), Translate(""), Translate(""), Translate(""));
    l_intDialogID = 2;
    blnMultipleChoiceReduced = ASWGLOBAL::BOOL::FALSE;
    NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, strMessage, Translate("NO"));
    if (t_arrBlnProcessActivation.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, strMessage, Translate("YES - Run after post-ligation cleanup"));
    }
    else
    {
      blnMultipleChoiceReduced = ASWGLOBAL::BOOL::TRUE;
    }
    if (t_arrBlnProcessActivation.ElementAt( 6 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARLOADING::MultipleChoiceDialog_DefineChoiceElement(l_intDialogID, strMessage, Translate("YES - Run after post-amplification cleanup"));
    }
    NGSSTARLOADING::MultipleChoiceDialog_DisplayDialog(l_intDialogID);
    NGSSTARLOADING::MultipleChoiceDialog_RetrieveUserSelection(l_intDialogID, strMessage, l_int_OptionSelected);
    if (l_int_OptionSelected == 1)
    {
      t_blnRunSizeSelectionPostLigation = ASWGLOBAL::BOOL::FALSE;
      t_blnRunSizeSelectionPostAmplification = ASWGLOBAL::BOOL::FALSE;
    }
    if (l_int_OptionSelected == 2)
    {
      if (blnMultipleChoiceReduced == ASWGLOBAL::BOOL::TRUE)
      {
        t_blnRunSizeSelectionPostAmplification = ASWGLOBAL::BOOL::TRUE;
      }
      else
      {
        t_blnRunSizeSelectionPostLigation = ASWGLOBAL::BOOL::TRUE;
      }
    }
    if (l_int_OptionSelected == 3)
    {
      t_blnRunSizeSelectionPostAmplification = ASWGLOBAL::BOOL::TRUE;
    }
  }
  else
  {
    t_blnRunSizeSelectionPostLigation = ASWGLOBAL::BOOL::FALSE;
    t_blnRunSizeSelectionPostAmplification = ASWGLOBAL::BOOL::FALSE;
  }
  if(0){
    NGSSTARLOADING::Display_SelectEmailAddress_Dialog(t_strEmailAddress);
  }
  l_intLengthEmailAddress = StrGetLength(t_strEmailAddress);
  if (l_intLengthEmailAddress > 0)
  {
    t_blnSendEmails = ASWGLOBAL::BOOL::TRUE;
  }
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    MECC::TraceComment(Translate("The GINIT\n\nThere is always a running protocol which is pre-heating the ODTC for the next step where ODTC is needed. \n\nPlease be aware that we created some example xml files - verify that you ensure the correct ODTC temperatures and profiles for your biological processes.\n\n"));
    NGSSTARPREP::ODTC_DownloadProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_intSelectedIndexSTART == 1)
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("HYPER_Init_Block4CLid50C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
    if (t_intSelectedIndexSTART == 2)
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("HYPER_Init_Block4CLid85C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
    if (t_intSelectedIndexSTART == 3)
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("HYPER_Init_Block20CLid40C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
    if (t_intSelectedIndexSTART == 4)
    {
      if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("HYPER_Init_Block20Lid110C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
      }
    }
    if (t_intSelectedIndexSTART == 5)
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("HYPER_Init_Block20Lid110C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
  }
}

private function Process3_AdapterLigation(  ) void {
  private variable l_strReadCurrentBarcode;
  private variable l_intReturnValue_ExternalThermalCycling;
  private variable l_arrListExternalThermalCyclingMessage[];
  private variable loopCounter1;
  private timer LigationTimer;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process3_AdapterLigation********************\n*************************************************************************************************************************"));
  VectorCustomDialogs::SetStatusTitle(Translate("Process 3: Adapter Ligation"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process3_Adapter Ligation"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM3, t_intRequiredNumberOf300uLTipsM3, t_intRequiredNumberOf1000uLTipsM3, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
  if (t_blnIsPlatedPrimer == ASWGLOBAL::BOOL::FALSE)
  {
    if (t_blnStampPlate == ASWGLOBAL::BOOL::TRUE)
    {
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, t_seq_IndexPlate_Pipette);
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seq_IndexPlate_Pipette, t_seqHSP_Pipette2, t_fltVolumeDilutedAdapter_Process03, Translate("Kapa_50F_Adapters_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 2, 0, 5, 0.8, 0.7, 0, 0);
    }
    else
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seq_IndexPlate_Pipette, t_seqHSP_Pipette2, t_fltVolumeDilutedAdapter_Process03, Translate("Kapa_50F_Adapters_SurfaceEmpty"), 2, 0, 5, 0.8, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
    }
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_UniveralAdapter, t_seqHSP_Pipette2, t_fltVolumeDilutedAdapter_Process03, Translate("Kapa_50F_Adapters_SurfaceEmpty"), 2, 0, 5, 0, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  }
  HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_LigationMasterMix, t_seqHSP_Pipette2, t_fltVolumeLigationMasterMix_Process03, Translate("Kapa_SVF_HyperPrepHyperPlus_LigationMix_SurfaceEmpty"), 20, 0, 80, 0, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("HYPER_AdapterLigation"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::DATA_IncubationTimer(LigationTimer, t_intLigationSeconds, 1);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_arrBlnProcessActivation.ElementAt( 5 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("HYPER_Init_Block20Lid110C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
  }
  else
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Incubate the sample in a preheated thermocycler as stated in the IFU for ligation."));
    }
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Adapter Ligation Incubation"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" Take plate from SECOND position and run the Adapter Ligation protocol on external thermocycler."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Wait until you have finished the incubation (20°C) for the adapter ligation."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please put the processed plate from the thermocycler to the unloaded carrier at the SECOND position. "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_1 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_1 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process3_AdapterLigation is completed"), ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: Process3_AdapterLigation********************"));
}

private function Process1_EnzymaticFragmentation(  ) void {
  private variable l_blnPCRcompleted;
  private variable l_strReadCurrentBarcode;
  private variable l_intReturnValue_ExternalThermalCycling;
  private variable l_arrListExternalThermalCyclingMessage[];
  private variable loopCounter1;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process1_EnzymaticDNAFragmentation***************\n*************************************************************************************************************************"));
  VectorCustomDialogs::SetStatusTitle(Translate("Process 1: Enzymatic DNA Fragmentation"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 1: Enzymatic Fragmentation"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM1, t_intRequiredNumberOf300uLTipsM1, t_intRequiredNumberOf1000uLTipsM1, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpCPAC_HSP, 0, 1, l_strReadCurrentBarcode, 2);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_FragmentationMasterMix, t_seqCPAC_HSP, t_fltVolumeFragmentationMastermix_Process01, Translate("Kapa_50F_HyperPrepHyperPlus_FragMasterMix_SurfaceEmpty"), 20, 0, 40, 0, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpCPAC_HSP, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("HYPER_Fragmentation"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::DATA_IncubationTimer(FragmentationTimer, t_intFragmentationSeconds, 1);
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("HYPER_ResetBlock37CLid50CtoBlock4CLid85C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    if(0){
      NGSSTARPREP::ODTC_GetDataFromLastRun(t_intDeviceNumberODTC, Translate("DNAFragmentationPart2"));
    }
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_arrBlnProcessActivation.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("HYPER_Init_Block4CLid85C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
  }
  else
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Incubate the sample in a preheated thermocycler as stated in the IFU for Fragmentation"));
    }
    l_blnPCRcompleted = 0;
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Enzymatic Fragmentation"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" Take plate from CPAC and run the Fragmentation protocol on external thermocycler."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Wait until incubation is completed."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please put the processed plate from the thermocycler to the unloaded carrier at the SECOND position. "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_2 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_2 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process1_EnzymaticDNAFragmentation is completed"), ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: Process1_EnzymaticDNAFragmentation********************"));
}

private function Process4_PostLigationCleanup(  ) void {
  private variable l_strReadCurrentBarcode;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process4_PostLigationCleanup********************\n*************************************************************************************************************************"));
  VectorCustomDialogs::SetStatusTitle(Translate("Process 4: Post Ligation Cleanup"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 4: Post Ligation Cleanup"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM4, t_intRequiredNumberOf300uLTipsM4, t_intRequiredNumberOf1000uLTipsM4, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
  SeqIncrement(t_trp_Stack1, 1);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2, t_seqHHS3_MIDI, 110.0, Translate("Kapa_SVF_SampleForCleanup_SurfaceEmpty"), 0, 0, 0, 0.5, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("*****Updated resuspension mix to 1400 RMP and doubled mixing times.  Also increase bead settling time after elution to five minutes to prevent any bead carry over.  **** Roche Edits****"));
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::Process_CleanUp_MPH_V2(ML_STAR, t_seqAspirate_cleanupbeads, t_seqAspirate_cleanupbeads, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.MPH_waste, t_seqAspirate_TrisBuffer, t_fltVolumeEthanol80_Process04, t_fltVolumeBeads_Process04, t_fltVolumeTrisBuffer_Process04, t_fltDiscardSupernatant_Process04, Translate("KitName_SVF_MPH_Ampure_SurfaceEmpty"), Translate("KitName_SVF_MPH_Ampure_SurfaceEmpty_FastMix"), Translate("KitName_HVF_80PercentEtOH_JetPart"), Translate("KitName_SVF_MPH_RSB_SurfaceEmpty"), Translate("KitName_SVF_MPH_SupernatantToWaste_JetEmpty"), Translate("KitName_SVF_MPH_EthanolToWaste_JetEmpty"), 1400, 1400, 120, 120, t_intHHS3_HSP3_MIDI3, 300, 300, 300, 120, 300, t_intNumberOfSamplesFromFile);
  }
  else
  {
    NGSSTARPROCESSES::Process_CleanUp_V2(ML_STAR, t_seqAspirate_cleanupbeads, t_seqAspirate_cleanupbeads, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqAspirate_TrisBuffer, t_fltVolumeEthanol80_Process04, t_fltVolumeBeads_Process04, t_fltVolumeTrisBuffer_Process04, t_fltDiscardSupernatant_Process04, Translate("KitName_SVF_Ampure_SurfaceEmpty"), Translate("KitName_SVF_Ampure_SurfaceEmpty_FastMix"), Translate("KitName_HVF_80PercentEtOH_JetPart"), Translate("KitName_SVF_RSB_SurfaceEmpty"), Translate("KitName_SVF_SupernatantToWaste_JetEmpty"), Translate("KitName_SVF_EthanolToWaste_JetEmpty"), 1400, 1400, 240, 240, 12, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::TRUE, 300, 300, 300, 120, 300);
  }
  if (t_blnRunSizeSelectionPostLigation == ASWGLOBAL::BOOL::TRUE)
  {
    MECC::TraceComment(Translate("************* Now transferring clean sample to new MIDI .............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Transferring clean sample to MIDI..."));
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack1, t_trpMIDI_Pipette, 0, 1, l_strReadCurrentBarcode, 4);
    SeqIncrement(t_trp_Stack1, 1);
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqMIDI_Pipette, t_fltVolumeTrisBuffer_Process04, Translate("Kapa_SVF_SampleForCleanup_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 1.0, 1, 0, 0);
    }
    else
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqMIDI_Pipette, t_fltVolumeTrisBuffer_Process04, Translate("Kapa_SVF_SampleForCleanup_SurfaceEmpty"), 0, 0, 0, 1.0, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
    }
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpMIDI_Pipette, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  }
  else
  {
    MECC::TraceComment(Translate("************* Now transferring clean sample to new HSP .............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Transferring clean sample to HSP..."));
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode, 4);
    SeqIncrement(t_trp_Stack4, 1);
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltVolumeTrisBuffer_Process04, Translate("Kapa_SVF_SampleForCleanup_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 1.0, 1, 0, 0);
    }
    else
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltVolumeTrisBuffer_Process04, Translate("Kapa_SVF_SampleForCleanup_SurfaceEmpty"), 0, 0, 0, 1.0, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
    }
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 4: Post Ligation Cleanup is completed"), ASWGLOBAL::BOOL::YES);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: Process4_PostLigationCleanup********************"));
}

private function Process5_LibraryAmplification(  ) void {
  private variable l_blnPCRcompleted;
  private variable l_strReadCurrentBarcode;
  private variable l_intReturnValue_ExternalThermalCycling;
  private variable l_arrListExternalThermalCyclingMessage[];
  private variable loopCounter1;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  Process5_LibraryAmplification************\n*************************************************************************************************************************"));
  VectorCustomDialogs::SetStatusTitle(Translate("Process 5: Library Amplification"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 5: Library Amplification"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM5, t_intRequiredNumberOf300uLTipsM5, t_intRequiredNumberOf1000uLTipsM5, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if (t_blnIsPlatedPrimer == ASWGLOBAL::BOOL::TRUE)
  {
    if (t_blnStampPlate == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seq_IndexPlate_Pipette, t_seqHSP_Pipette2, t_fltVolumeAmpPrimer_Process05, Translate("Kapa_50F_UDIPrimers_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 5, 0, 10, 0.5, 0.7, 0, 0);
    }
    else
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seq_IndexPlate_Pipette, t_seqHSP_Pipette2, t_fltVolumeAmpPrimer_Process05, Translate("Kapa_50F_UDIPrimers_SurfaceEmpty"), 5, 0, 10, 0.5, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
    }
  }
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_AmplificationMastermix, t_seqHSP_Pipette2, t_fltVolumeAmplificationMastermix_Process05, Translate("Kapa_50F_HyperPrepHyperPlus_PCRMasterMix_SurfaceEmpty"), 15, 0, 40, 0, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("t_strPCRProgramODTC: "), t_strPCRProgramODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, t_strPCRProgramODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_GetDataFromLastRun(t_intDeviceNumberODTC, t_strPCRProgramODTC);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
  }
  else
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Incubate the sample in a preheated thermocycler as stated in the IFU for PCR"));
    }
    l_blnPCRcompleted = 0;
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("PCR Amplification of Adapter Ligated DNA."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Wait until you finished the PCR Amplification of Adapter Ligated DNA :"));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please put the processed plate from the thermocycler to the unloaded carrier at the SECOND position. "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_3 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_3 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 5: Library Amplification is completed"), ASWGLOBAL::BOOL::YES);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: Process5_LibraryAmplification********************"));
}

private function Process6_PostAmplificationCleanup(  ) void {
  private variable l_strReadCurrentBarcode;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  Process6_PostAmplificationCleanup********************\n*************************************************************************************************************************"));
  VectorCustomDialogs::SetStatusTitle(Translate("Process 6: Post Amplification Cleanup"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 6: Purification of the PCR Reaction Sample Purification Beads"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM6, t_intRequiredNumberOf300uLTipsM6, t_intRequiredNumberOf1000uLTipsM6, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
  SeqIncrement(t_trp_Stack1, 1);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2, t_seqHHS3_MIDI, 55.0, Translate("Kapa_SVF_SampleForCleanup_SurfaceEmpty"), 0, 0, 0, 0.5, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  MECC::TraceComment(Translate("*****Updated resuspension mix to 1400 RMP and doubled mixing times.  Also increase bead settling time after elution, to prevent transfer of beads into final product.  **** Roche Edits****"));
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::Process_CleanUp_MPH_V2(ML_STAR, t_seqAspirate_cleanupbeads, t_seqAspirate_cleanupbeads, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.MPH_waste, t_seqAspirate_TrisBuffer, t_fltVolumeEthanol80_Process06, t_fltVolumeBeads_Process06, t_fltVolumeTrisBuffer_Process06, t_fltDiscardSupernatant_Process06, Translate("KitName_SVF_MPH_Ampure_SurfaceEmpty"), Translate("KitName_SVF_MPH_Ampure_SurfaceEmpty_FastMix"), Translate("KitName_HVF_80PercentEtOH_JetPart"), Translate("KitName_SVF_MPH_RSB_SurfaceEmpty"), Translate("KitName_SVF_MPH_SupernatantToWaste_JetEmpty"), Translate("KitName_SVF_MPH_EthanolToWaste_JetEmpty"), 1400, 1400, 120, 120, t_intHHS3_HSP3_MIDI3, 300, 300, 300, 120, 300, t_intNumberOfSamplesFromFile);
  }
  else
  {
    NGSSTARPROCESSES::Process_CleanUp_V2(ML_STAR, t_seqAspirate_cleanupbeads, t_seqAspirate_cleanupbeads, t_seqHHS3_MIDI, t_seqAspirate_Ethanol80, t_seqMIDI_OnMagnet, ML_STAR.LiquidWaste, t_seqAspirate_TrisBuffer, 200, t_fltVolumeBeads_Process06, t_fltVolumeTrisBuffer_Process06, t_fltDiscardSupernatant_Process06, Translate("KitName_SVF_Ampure_SurfaceEmpty"), Translate("KitName_SVF_Ampure_SurfaceEmpty_FastMix"), Translate("KitName_HVF_80PercentEtOH_JetPart"), Translate("KitName_SVF_RSB_SurfaceEmpty"), Translate("KitName_SVF_SupernatantToWaste_JetEmpty"), Translate("KitName_SVF_EthanolToWaste_JetEmpty"), 1400, 1400, 120, 120, 12, t_intHHS3_HSP3_MIDI3, ASWGLOBAL::BOOL::TRUE, 300, 300, 300, 120, 300);
  }
  if (t_blnRunSizeSelectionPostAmplification == ASWGLOBAL::BOOL::TRUE)
  {
    MECC::TraceComment(Translate("************* Now transferring clean sample to new MIDI .............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Transferring clean sample to MIDI..."));
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack1, t_trpMIDI_Pipette, 0, 1, l_strReadCurrentBarcode, 4);
    SeqIncrement(t_trp_Stack1, 1);
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqMIDI_Pipette, t_fltVolumeTrisBuffer_Process06, Translate("Kapa_SVF_SampleForCleanup_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 1.0, 1.0, 0, 0);
    }
    else
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqMIDI_Pipette, t_fltVolumeTrisBuffer_Process06, Translate("Kapa_SVF_SampleForCleanup_SurfaceEmpty"), 0, 0, 0, 1.0, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
    }
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpMIDI_Pipette, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  }
  else
  {
    MECC::TraceComment(Translate("************* Now transferring clean sample to new HSP .............."));
    VectorCustomDialogs::AppendStatusText(Translate("   Transferring clean sample to HSP..."));
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode, 4);
    SeqIncrement(t_trp_Stack4, 1);
    if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltVolumeTrisBuffer_Process06, Translate("Kapa_SVF_SampleForCleanup_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 1.0, 1, 0, 0);
    }
    else
    {
      NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltVolumeTrisBuffer_Process06, Translate("Kapa_SVF_SampleForCleanup_SurfaceEmpty"), 0, 0, 0, 1.0, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
    }
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 6: Post Amplification Cleanup is completed"), ASWGLOBAL::BOOL::YES);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: Process6_PostAmplificationCleanup********************"));
}

private function Process7_SizeSelection(  ) void {
  private variable l_strReadCurrentBarcode;
  private dialog dialogHandle1;
  private dialog dialogHandle_4;
  private dialog dialogHandle_5;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  Process7_SizeSelection********************\n*************************************************************************************************************************"));
  VectorCustomDialogs::SetStatusTitle(Translate("Process 7: Size Selection"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 7: Size Selection"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM7, t_intRequiredNumberOf300uLTipsM7, t_intRequiredNumberOf1000uLTipsM7, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  if(0){
    NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpHHS3_MIDI, 0, 1, l_strReadCurrentBarcode, 4);
    SeqIncrement(t_trp_Stack1, 1);
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqHSP_Pipette2, t_seqHHS3_MIDI, 50.0, Translate("Kapa_SVF_SampleForCleanup_SurfaceEmpty"), 0, 0, 0, 0.5, 0.7, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpHSP_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  }
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trp_Stack1, t_trpMIDI_Pipette, 0, 1, l_strReadCurrentBarcode, 4);
  SeqIncrement(t_trp_Stack1, 1);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::Process_SizeSelection_MPH(ML_STAR, t_seqAspirate_cleanupbeads, t_seqAspirate_cleanupbeads, ML_STAR.MPH_waste, t_seqHHS3_MIDI, t_seqMIDI_Pipette, t_seqAspirate_Ethanol80, t_seqAspirate_TrisBuffer, t_seqMIDI_OnMagnet, ML_STAR.MIDI_Waste, Translate("KitName_SVF_MPH_SupernatantToWaste_JetEmpty"), Translate("KitName_SVF_MPH_EthanolToWaste_JetEmpty"), Translate("KitName_SVF_MPH_RSB_SurfaceEmpty"), Translate("KitName_HVF_MPH_80PercentEtOH_JetPart"), Translate("KitName_SVF_MPH_Ampure_SurfaceEmpty"), Translate("KitName_SVF_MPH_Ampure_SurfaceEmpty"), Translate("KitName_SVF_MPH_Ampure_SurfaceEmpty"), t_fltDiscardSupernatant_Process07, t_fltVolumeEthanol80_Process07, t_fltVolumeBeads01_Process07, t_fltVolumeBeads02_Process07, t_fltVolumeTrisBuffer_Process07, t_intHHS3_HSP3_MIDI3, 1400, 120, 1400, 120, 300, 300, 240, 120, 300, t_intNumberOfSamplesFromFile);
  }
  else
  {
    NGSSTARPROCESSES::Process_SizeSelection(ML_STAR, t_seqAspirate_cleanupbeads, t_seqAspirate_cleanupbeads, ML_STAR.LiquidWaste, t_seqHHS3_MIDI, t_seqMIDI_Pipette, t_seqAspirate_Ethanol80, t_seqAspirate_TrisBuffer, t_seqMIDI_OnMagnet, ML_STAR.MIDI_Waste, Translate("KitName_SVF_EthanolToWaste_JetEmpty"), Translate("KitName_SVF_SupernatantToWaste_JetEmpty"), Translate("KitName_SVF_RSB_SurfaceEmpty"), Translate("KitName_HVF_80PercentEtOH_JetPart"), Translate("KitName_SVF_Ampure_SurfaceEmpty"), Translate("KitName_SVF_Ampure_SurfaceEmpty_FastMix"), t_fltDiscardSupernatant_Process07, t_fltVolumeEthanol80_Process07, t_fltVolumeBeads01_Process07, t_fltVolumeBeads02_Process07, t_fltVolumeTrisBuffer_Process07, t_intHHS3_HSP3_MIDI3, 1400, 120, 1400, 120, ASWGLOBAL::BOOL::TRUE, 12, 300, 300, 240, 120, 300);
  }
  MECC::TraceComment(Translate("************* Now transferring clean sample to new HSP .............."));
  VectorCustomDialogs::AppendStatusText(Translate("   Transferring clean sample to HSP..."));
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trp_Stack4, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode, 4);
  SeqIncrement(t_trp_Stack4, 1);
  if (t_blnUseMPHInsteadOfChannels == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPROCESSES::PIP_MPH_ReagentsfromPlatetoPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltVolumeTrisBuffer_Process07, Translate("KitName_50F_Water_SurfaceEmpty"), t_intNumberOfSamplesFromFile, 0, 0, 0, 1.0, 1, 0, 0);
  }
  else
  {
    NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqMIDI_OnMagnet, t_seqHSP_Pipette2, t_fltVolumeTrisBuffer_Process07, Translate("KitName_50F_CleanSample_SurfaceEmpty"), 0, 0, 0, 1.0, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  }
  NGSSTARPROCESSES::Trp_MIDI(ML_STAR, t_trpMIDI_OnMagnet, t_trpMIDI_Waste, 0, 1, l_strReadCurrentBarcode, 4);
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 7: Size Selection is completed"), ASWGLOBAL::BOOL::YES);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: Process7_SizeSelection********************"));
}

private function Process2_EndRepairAndATailing(  ) void {
  private variable l_blnPCRcompleted;
  private variable loopCounter1;
  private variable l_strReadCurrentBarcode;
  private variable l_intReturnValue_ExternalThermalCycling;
  private variable l_arrListExternalThermalCyclingMessage[];
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START: Process2_End Repair and A-Tailing***************\n*************************************************************************************************************************"));
  VectorCustomDialogs::SetStatusTitle(Translate("Process 2: End Repair and A-Tailing"));
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process 2: End Repair and A-Tailing"), ASWGLOBAL::BOOL::YES);
  NGSSTARPROCESSES::DATA_TipCounterRead(ML_STAR, t_intRequiredNumberOf50uLTipsM2, t_intRequiredNumberOf300uLTipsM2, t_intRequiredNumberOf1000uLTipsM2, 4, ASWGLOBAL::BOOL::FALSE, ASWGLOBAL::BOOL::FALSE);
  NGSSTARPROCESSES::Trp_HSP(ML_STAR, t_trpHSP_Pipette2, t_trpCPAC_HSP, 0, 1, l_strReadCurrentBarcode, 2);
  NGSSTARPROCESSES::PIP_ReagentsFromTubeOrTroughOrPlateToPlate(ML_STAR, t_seqAspirate_EndRepairandATailingMasterMix, t_seqCPAC_HSP, t_fltVolumeEndRepairAndATailingMasterMix_Process02, Translate("Kapa_50F_HyperPrepHyperPlus_ERATMasterMix_SurfaceEmpty"), 20, 0, 45, 0, 1, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::TRUE, ASWGLOBAL::BOOL::FALSE);
  if (t_blnODTCused == ASWGLOBAL::BOOL::TRUE)
  {
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpCPAC_HSP, t_trpHSP_ODTC, 0, 0, l_strReadCurrentBarcode);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidStackParkPos, t_trpHamiltonComfortLidODTC, 1, ASWGLOBAL::BOOL::FALSE);
    SeqIncrement(t_trpHamiltonComfortLidStackParkPos, 1);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_blnIsHyperPlusChemistry == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("HYPER_ATailing"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    }
    else
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("HYPER_EndRepairAndATailing"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, ASWGLOBAL::BOOL::FALSE);
    }
    NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    NGSSTARPROCESSES::Trp_HamiltonComfortLid(ML_STAR, t_trpHamiltonComfortLidODTC, t_trpHamiltonComfortLidWaste, 0, ASWGLOBAL::BOOL::FALSE);
    NGSSTARPROCESSES::Trp_HSPFromAndToODTCwithiSWAP(ML_STAR, t_trpHSP_ODTC, t_trpHSP_Pipette2, 0, 1, l_strReadCurrentBarcode);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    if (t_arrBlnProcessActivation.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("HYPER_Init_Block20CLid40C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
  }
  else
  {
    if (t_blnSendEmails == ASWGLOBAL::BOOL::TRUE)
    {
      if (t_blnIsHyperPlusChemistry == ASWGLOBAL::BOOL::TRUE)
      {
        NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Incubate the sample in a preheated thermocycler as stated in the IFU for A-Tailing"));
      }
      else
      {
        NGSSTARPROCESSES::DATA_SendEmail(Translate("The system is waiting for your intervention"), Translate("Incubate the sample in a preheated thermocycler as stated in the IFU for End Repair and A-Tailing"));
      }
    }
    l_blnPCRcompleted = 0;
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    l_arrListExternalThermalCyclingMessage.SetSize(0);
    if (t_blnIsHyperPlusChemistry == ASWGLOBAL::BOOL::TRUE)
    {
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("A-Tailing"));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" Take plate from CPAC and run the A-Tailing protocol on external thermocycler."));
    }
    else
    {
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("End Repair and A-Tailing"));
      l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" Take plate from CPAC and run the End Repair and A-Tailing protocol on external thermocycler."));
    }
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Wait until incubation is completed."));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Please put the processed plate from the thermocycler to the unloaded carrier at the SECOND position. "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate(" "));
    l_arrListExternalThermalCyclingMessage.AddAsLast(Translate("Selecting OK will continue the current process."));
    l_intReturnValue_ExternalThermalCycling = VectorCustomDialogs::ListDialog(Translate("External thermal cycling"), VectorCustomDialogs::IconType::Information, VectorCustomDialogs::ButtonType::OkCancel, 0, 0, 0, Translate(""), Translate(""), l_arrListExternalThermalCyclingMessage);
    if (l_intReturnValue_ExternalThermalCycling == ASWGLOBAL::DIALOG::CANCEL)
    {
      abort;
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    if (t_blnActivateLockUnlockOfFrontCover == ASWGLOBAL::BOOL::TRUE)
    {
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          onerror goto errLabel_6 ;
          err.Clear();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          break;
          errLabel_6 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            l_int_rtnErrorDialog = VectorCustomDialogs::Initialize();
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
            l_int_rtnErrorDialog = VectorCustomDialogs::MessageDialog(Translate("Front cover monitoring"), VectorCustomDialogs::IconType::Warning, VectorCustomDialogs::ButtonType::Ok, 0, 0, 0, Translate("Front cover open - close door to proceed run."));
            NGSSTARLOADING::_CheckBindReturnValueVectorCustomDialogs(l_int_rtnErrorDialog);
          }   /* end if from skip handler if no error */
        }
      }
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
  NGSSTARPROCESSES::DATA_UpdateInformationIntoReportFile(Translate("Process2_End Repair and A-Tailing is completed"), ASWGLOBAL::BOOL::TRUE);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE: Process2_End Repair and A-Tailing********************"));
}
